###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000013', 'http://identifiers.org/biomodels.db/MODEL6615594069']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/15073223']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/4097']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0019253']
#@creatorEmail:'lenov@ebi.ac.uk'
#@creatorName:'Le Novère Nicolas'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 27 molecules and 21 reactions. The translated model has 25 molecules and 34 rules'
###
begin model
begin parameters
	Light_on 1.0
	r1_Rbco_vm 340.000000
	r1_Rbco_km 0.020000
	r1_Rbco_KiPGA 0.840000
	r1_Rbco_KiFBP 0.040000
	r1_Rbco_KiSBP 0.075000
	r1_Rbco_KiPi 0.900000
	r1_Rbco_KiNADPH 0.070000
	r2_PGK_v 500000000.000000
	r2_q2 0.000310
	r3_G3Pdh_v 500000000.000000
	r3_q3 16000000.000000
	r4_TPI_v 500000000.000000
	r4_q4 22.000000
	r5_F_Aldo_v 500000000.000000
	r5_q5 7.100000
	r6_FBPase_ch_vm 200.000000
	r6_FBPase_ch_km 0.030000
	r6_FBPase_ch_KiF6P 0.700000
	r6_FBPase_ch_KiPi 12.000000
	r7_F_TKL_v 500000000.000000
	r7_q7 0.084000
	r8_E_Aldo_v 500000000.000000
	r8_q8 13.000000
	r9_SBPase_ch_vm 40.000000
	r9_SBPase_ch_km 0.013000
	r9_SBPase_ch_KiPi 12.000000
	r10_G_TKL_v 500000000.000000
	r10_q10 0.850000
	r11_R5Piso_v 500000000.000000
	r11_q11 0.400000
	r12_X5Pepi_v 500000000.000000
	r12_q12 0.670000
	r13_Ru5Pk_ch_vm 10000.000000
	r13_Ru5Pk_ch_km1 0.050000
	r13_Ru5Pk_ch_KiPGA 2.000000
	r13_Ru5Pk_ch_KiRuBP 0.700000
	r13_Ru5Pk_ch_KiPi 4.000000
	r13_Ru5Pk_ch_KiADP1 2.500000
	r13_Ru5Pk_ch_km2 0.050000
	r13_Ru5Pk_ch_KiADP2 0.400000
	r14_PGI_v 500000000.000000
	r14_q14 2.300000
	r15_PGM_v 500000000.000000
	r15_q15 0.058000
	r16_LR_vm 3500.000000
	r16_LR_kmADP 0.014000
	r16_LR_kmPi 0.300000
	r17_StSyn_vm 40.000000
	r17_stsyn_ch_km1 0.080000
	r17_stsyn_ch_Ki 10.000000
	r17_stsyn_ch_km2 0.080000
	r17_stsyn_ch_ka1 0.100000
	r17_stsyn_ch_ka2 0.020000
	r17_stsyn_ch_ka3 0.020000
	r18_StPase_Vm 40.000000
	r18_StPase_km 0.100000
	r18_StPase_kiG1P 0.050000
	r19_TP_Piap_vm 250.000000
	r19_TP_Piap_kDHAP_ch 0.077000
	r19_TP_Piap_kPi_cyt 0.740000
	r19_TP_Piap_kPi_ch 0.630000
	r19_TP_Piap_kPGA_ch 0.250000
	r19_TP_Piap_kGAP_ch 0.075000
	r20_PGA_xpMult 0.750000
	r20_TP_Piap_vm 250.000000
	r20_TP_Piap_kPGA_ch 0.250000
	r20_TP_Piap_kPi_cyt 0.740000
	r20_TP_Piap_kPi_ch 0.630000
	r20_TP_Piap_kDHAP_ch 0.077000
	r20_TP_Piap_kGAP_ch 0.075000
	r21_TP_Piap_vm 250.000000
	r21_TP_Piap_kGAP_ch 0.075000
	r21_TP_Piap_kPi_cyt 0.740000
	r21_TP_Piap_kPi_ch 0.630000
	r21_TP_Piap_kPGA_ch 0.250000
	r21_TP_Piap_kDHAP_ch 0.077000
end parameters
begin compartments
	#volume units: L
	chloroplast 3 1.0
	cytosol 3 1.0
end compartments
begin molecule types
	#^ bqbiol:is chebi:CHEBI:24636
	x_Proton_ch()
	#^ bqbiol:is chebi:CHEBI:16474, kegg.compound:C00005
	x_NADPH_ch()
	#^ bqbiol:is chebi:CHEBI:58601, kegg.compound:C00103
	G1P_ch()
	#^ bqbiol:is chebi:CHEBI:18367, kegg.compound:C00009
	x_Pi_cyt()
	#^ bqbiol:isVersionOf chebi:CHEBI:57634
	F6P_ch()
	#^ bqbiol:is chebi:CHEBI:17138, kegg.compound:C00661
	x_GAP_cyt()
	#^ bqbiol:is chebi:CHEBI:16761, kegg.compound:C00008
	ADP_ch(pi_ch)
	#^ bqbiol:is kegg.compound:C00236
	BPGA_ch()
	#^ bqbiol:is chebi:CHEBI:16332, kegg.compound:C00231
	X5P_ch()
	#^ bqbiol:is chebi:CHEBI:18367, kegg.compound:C00009
	Pi_ch(adp_ch)
	#^ bqbiol:is kegg.compound:C00197
	x_PGA_cyt()
	#^ bqbiol:is chebi:CHEBI:15721, kegg.compound:C05382
	S7P_ch()
	#^ bqbiol:is chebi:CHEBI:16108, kegg.compound:C00111
	x_DHAP_cyt()
	#^ bqbiol:is chebi:CHEBI:14314, kegg.compound:C00668
	G6P_ch()
	#^ bqbiol:is kegg.compound:C00197
	PGA_ch()
	#^ bqbiol:is chebi:CHEBI:16526, kegg.compound:C00011
	x_CO2()
	#^ bqbiol:is chebi:CHEBI:16108, kegg.compound:C00111
	DHAP_ch()
	#^ bqbiol:is chebi:CHEBI:48153, kegg.compound:C00279
	E4P_ch()
	#^ bqbiol:is chebi:CHEBI:17969, kegg.compound:C00447
	SBP_ch()
	#^ bqbiol:is chebi:CHEBI:18009, kegg.compound:C00006
	x_NADP_ch()
	#^ bqbiol:is kegg.compound:C00369
	x_Starch_ch()
	#^ bqbiol:is chebi:CHEBI:17797, kegg.compound:C00117
	R5P_ch(u~U~0)
	#^ bqbiol:is chebi:CHEBI:28013, kegg.compound:C05378
	FBP_ch()
	#^ bqbiol:is kegg.compound:C01182
	RuBP_ch()
	#^ bqbiol:is chebi:CHEBI:17138, kegg.compound:C00118
	GAP_ch()
end molecule types
begin seed species
	@chloroplast:x_CO2()@chloroplast 6.022e+20 # (1.0 * 0.001)mol/L * 6.022e23/mol *1.0L #x_CO2 #x_CO2
	@chloroplast:RuBP_ch()@chloroplast 2.0260416800000003e+20 #original 0.33644mM/L  #RuBP_ch #RuBP_ch
	@chloroplast:PGA_ch()@chloroplast 2.020254538e+21 #original 3.35479mM/L  #PGA_ch #PGA_ch
	@chloroplast:Pi_ch(adp_ch!17)@chloroplast.ADP_ch(pi_ch!17)@chloroplast 2.9993173200000005e+20 #original 0.49806mM/L  #ATP_ch #ATP_ch
	@chloroplast:BPGA_ch()@chloroplast 8.927615e+19 #original 0.14825mM/L  #BPGA_ch #BPGA_ch
	@chloroplast:x_NADPH_ch()@chloroplast 1.2646200000000002e+20 #original 0.21mM/L  #x_NADPH_ch #x_NADPH_ch
	@chloroplast:GAP_ch()@chloroplast 8.033348e+18 #original 0.01334mM/L  #GAP_ch #GAP_ch
	@chloroplast:Pi_ch(adp_ch)@chloroplast 9.431656400000001e+20 #original 1.5662mM/L  #Pi_ch #Pi_ch
	@chloroplast:DHAP_ch()@chloroplast 1.7671559e+20 #original 0.29345mM/L  #DHAP_ch #DHAP_ch
	@chloroplast:FBP_ch()@chloroplast 1.6717072000000002e+19 #original 0.02776mM/L  #FBP_ch #FBP_ch
	@chloroplast:F6P_ch()@chloroplast 8.218885820000001e+20 #original 1.36481mM/L  #F6P_ch #F6P_ch
	@chloroplast:E4P_ch()@chloroplast 2.4702846200000004e+20 #original 0.41021mM/L  #E4P_ch #E4P_ch
	@chloroplast:X5P_ch()@chloroplast 2.185986e+18 #original 0.00363mM/L  #X5P_ch #X5P_ch
	@chloroplast:SBP_ch()@chloroplast 9.42358692e+20 #original 1.56486mM/L  #SBP_ch #SBP_ch
	@chloroplast:S7P_ch()@chloroplast 3.257902e+18 #original 0.00541mM/L  #S7P_ch #S7P_ch
	@chloroplast:R5P_ch(u~0)@chloroplast 3.607178e+18 #original 0.00599mM/L  #R5P_ch #R5P_ch
	@chloroplast:R5P_ch(u~U)@chloroplast 1.41517e+18 #original 0.00235mM/L  #Ru5P_ch #Ru5P_ch
	@cytosol:x_Pi_cyt()@cytosol 3.011e+20 #original 0.5mM/L  #x_Pi_cyt #x_Pi_cyt
	@cytosol:x_GAP_cyt()@cytosol 6.022e+20 #original 1.0mM/L  #x_GAP_cyt #x_GAP_cyt
	@chloroplast:G6P_ch()@chloroplast 1.8906671200000003e+21 #original 3.1396mM/L  #G6P_ch #G6P_ch
	@chloroplast:x_NADP_ch()@chloroplast 1.74638e+20 #original 0.29mM/L  #x_NADP_ch #x_NADP_ch
	@cytosol:x_PGA_cyt()@cytosol 6.022e+20 #original 1.0mM/L  #x_PGA_cyt #x_PGA_cyt
	@chloroplast:ADP_ch(pi_ch)@chloroplast 8.972780000000001e+17 #original 0.00149mM/L  #ADP_ch #ADP_ch
	@cytosol:x_DHAP_cyt()@cytosol 6.022e+20 #original 1.0mM/L  #x_DHAP_cyt #x_DHAP_cyt
	@chloroplast:x_Proton_ch()@chloroplast 1.5127264e+16 #original 2.512e-05mM/L  #x_Proton_ch #x_Proton_ch
	@chloroplast:G1P_ch()@chloroplast 1.09636532e+20 #original 0.18206mM/L  #G1P_ch #G1P_ch
	@chloroplast:x_Starch_ch()@chloroplast 6.022e+20 #original 1.0mM/L  #x_Starch_ch #x_Starch_ch
end seed species
begin observables
	Species x_CO2_chloroplast @chloroplast:x_CO2()@chloroplast #x_CO2
	Species RuBP_ch_chloroplast @chloroplast:RuBP_ch()@chloroplast #RuBP_ch
	Species PGA_ch_chloroplast @chloroplast:PGA_ch()@chloroplast #PGA_ch
	Species ATP_ch_chloroplast @chloroplast:Pi_ch(adp_ch!17)@chloroplast.ADP_ch(pi_ch!17)@chloroplast #ATP_ch
	Species BPGA_ch_chloroplast @chloroplast:BPGA_ch()@chloroplast #BPGA_ch
	Species x_NADPH_ch_chloroplast @chloroplast:x_NADPH_ch()@chloroplast #x_NADPH_ch
	Species GAP_ch_chloroplast @chloroplast:GAP_ch()@chloroplast #GAP_ch
	Species Pi_ch_chloroplast @chloroplast:Pi_ch(adp_ch)@chloroplast #Pi_ch
	Species DHAP_ch_chloroplast @chloroplast:DHAP_ch()@chloroplast #DHAP_ch
	Species FBP_ch_chloroplast @chloroplast:FBP_ch()@chloroplast #FBP_ch
	Species F6P_ch_chloroplast @chloroplast:F6P_ch()@chloroplast #F6P_ch
	Species E4P_ch_chloroplast @chloroplast:E4P_ch()@chloroplast #E4P_ch
	Species X5P_ch_chloroplast @chloroplast:X5P_ch()@chloroplast #X5P_ch
	Species SBP_ch_chloroplast @chloroplast:SBP_ch()@chloroplast #SBP_ch
	Species S7P_ch_chloroplast @chloroplast:S7P_ch()@chloroplast #S7P_ch
	Species R5P_ch_chloroplast @chloroplast:R5P_ch(u~0)@chloroplast #R5P_ch
	Species Ru5P_ch_chloroplast @chloroplast:R5P_ch(u~U)@chloroplast #Ru5P_ch
	Species x_Pi_cyt_cytosol @cytosol:x_Pi_cyt()@cytosol #x_Pi_cyt
	Species x_GAP_cyt_cytosol @cytosol:x_GAP_cyt()@cytosol #x_GAP_cyt
	Species G6P_ch_chloroplast @chloroplast:G6P_ch()@chloroplast #G6P_ch
	Species x_NADP_ch_chloroplast @chloroplast:x_NADP_ch()@chloroplast #x_NADP_ch
	Species x_PGA_cyt_cytosol @cytosol:x_PGA_cyt()@cytosol #x_PGA_cyt
	Species ADP_ch_chloroplast @chloroplast:ADP_ch(pi_ch)@chloroplast #ADP_ch
	Species x_DHAP_cyt_cytosol @cytosol:x_DHAP_cyt()@cytosol #x_DHAP_cyt
	Species x_Proton_ch_chloroplast @chloroplast:x_Proton_ch()@chloroplast #x_Proton_ch
	Species G1P_ch_chloroplast @chloroplast:G1P_ch()@chloroplast #G1P_ch
	Species x_Starch_ch_chloroplast @chloroplast:x_Starch_ch()@chloroplast #x_Starch_ch
end observables
begin functions
	fRate0() = 340.0*Light_on*RuBP_ch_chloroplast/(0.5*FBP_ch_chloroplast + 0.0238095238095238*PGA_ch_chloroplast + 0.0222222222222222*Pi_ch_chloroplast + RuBP_ch_chloroplast + 0.266666666666667*SBP_ch_chloroplast + 0.285714285714286*x_NADPH_ch_chloroplast + 0.02)
	fRate1() = 500000000.0*Light_on
	fRate1m() = 1612903225806.45*Light_on
	fRate2() = 500000000.0*Light_on
	fRate2m() = 31.25*Light_on
	fRate3m() = 22727272.7272727
	fRate4m() = 70422535.2112676
	fRate5() = 1680.0*Light_on/(0.36*F6P_ch_chloroplast + 8.4*FBP_ch_chloroplast + 0.021*Pi_ch_chloroplast + 0.252)
	fRate6m() = 5952380952.38095
	fRate7m() = 38461538.4615385
	fRate8() = 480.0*Light_on/(0.013*Pi_ch_chloroplast + 12.0*SBP_ch_chloroplast + 0.156)
	fRate9m() = 588235294.117647
	fRate10m() = 1250000000.0
	fRate11m() = 746268656.716418
	fRate12() = 56000.0*Light_on/(0.056*ADP_ch_chloroplast*ATP_ch_chloroplast*PGA_ch_chloroplast + 0.028*ADP_ch_chloroplast*ATP_ch_chloroplast*Pi_ch_chloroplast + 0.16*ADP_ch_chloroplast*ATP_ch_chloroplast*RuBP_ch_chloroplast + 2.24*ADP_ch_chloroplast*ATP_ch_chloroplast*(Ru5P_ch_chloroplast + 0.05) + 0.0175*ADP_ch_chloroplast*PGA_ch_chloroplast + 0.00875*ADP_ch_chloroplast*Pi_ch_chloroplast + 0.05*ADP_ch_chloroplast*RuBP_ch_chloroplast + 0.7*ADP_ch_chloroplast*(Ru5P_ch_chloroplast + 0.05) + 5.6*ATP_ch_chloroplast*Ru5P_ch_chloroplast + 0.28*ATP_ch_chloroplast + 0.14*PGA_ch_chloroplast*(ATP_ch_chloroplast + 0.05) + 0.07*Pi_ch_chloroplast*(ATP_ch_chloroplast + 0.05) + 0.28*Ru5P_ch_chloroplast + 0.4*RuBP_ch_chloroplast*(ATP_ch_chloroplast + 0.05) + 0.014)
	fRate13m() = 217391304.347826
	fRate14m() = 8620689655.17241
	fRate15() = 3500.0*Light_on/(ADP_ch_chloroplast*Pi_ch_chloroplast + 0.3*ADP_ch_chloroplast + 0.014*Pi_ch_chloroplast + 0.0042)
	fRate16() = 40.0*PGA_ch_chloroplast/(0.1*ADP_ch_chloroplast*PGA_ch_chloroplast*(ATP_ch_chloroplast*G1P_ch_chloroplast + 0.08*ATP_ch_chloroplast + 0.08*G1P_ch_chloroplast + 0.0064) + 1.0*PGA_ch_chloroplast*(ATP_ch_chloroplast*G1P_ch_chloroplast + 0.08*ATP_ch_chloroplast + 0.02*F6P_ch_chloroplast + 0.02*FBP_ch_chloroplast + 0.08*G1P_ch_chloroplast + 0.0064) + 0.8*Pi_ch_chloroplast)
	fRate17() = 40.0*Pi_ch_chloroplast/(2.0*G1P_ch_chloroplast + Pi_ch_chloroplast + 0.1)
	fRate18() = 250.0*DHAP_ch_chloroplast/(0.077*(1 + 0.74/x_Pi_cyt_cytosol)*(12.987012987013*DHAP_ch_chloroplast + 13.3333333333333*GAP_ch_chloroplast + 4.0*PGA_ch_chloroplast + 1.58730158730159*Pi_ch_chloroplast) + 0.077)
	fRate19() = 187.5*PGA_ch_chloroplast/(0.25*(1 + 0.74/x_Pi_cyt_cytosol)*(12.987012987013*DHAP_ch_chloroplast + 13.3333333333333*GAP_ch_chloroplast + 4.0*PGA_ch_chloroplast + 1.58730158730159*Pi_ch_chloroplast) + 0.25)
	fRate20() = 250.0*GAP_ch_chloroplast/(0.075*(1 + 0.74/x_Pi_cyt_cytosol)*(12.987012987013*DHAP_ch_chloroplast + 13.3333333333333*GAP_ch_chloroplast + 4.0*PGA_ch_chloroplast + 1.58730158730159*Pi_ch_chloroplast) + 0.075)
end functions
begin reaction rules
	E1_reactants_0: 0  -> RuBP_ch()@chloroplast -1*(fRate0()) #Modifiers(FBP_ch, SBP_ch, Pi_ch, x_NADPH_ch)
	E1_reactants_1: 0  -> x_CO2()@chloroplast -1*(fRate0()) #Modifiers(FBP_ch, SBP_ch, Pi_ch, x_NADPH_ch)
	E1_products_0: 0  -> PGA_ch()@chloroplast 2.0*fRate0() #Modifiers(FBP_ch, SBP_ch, Pi_ch, x_NADPH_ch)
	E2: PGA_ch()@chloroplast + Pi_ch(adp_ch!17)@chloroplast.ADP_ch(pi_ch!17)@chloroplast <-> BPGA_ch()@chloroplast + ADP_ch(pi_ch)@chloroplast fRate1(),fRate1m()
	E3: x_NADPH_ch()@chloroplast + BPGA_ch()@chloroplast + x_Proton_ch()@chloroplast <-> x_NADP_ch()@chloroplast + GAP_ch()@chloroplast + Pi_ch(adp_ch)@chloroplast fRate2(),fRate2m()
	E4: GAP_ch()@chloroplast <-> DHAP_ch()@chloroplast r4_TPI_v,fRate3m()
	E5: GAP_ch()@chloroplast + DHAP_ch()@chloroplast <-> FBP_ch()@chloroplast r5_F_Aldo_v,fRate4m()
	E6: FBP_ch()@chloroplast -> F6P_ch()@chloroplast + Pi_ch(adp_ch)@chloroplast fRate5()
	E7: GAP_ch()@chloroplast + F6P_ch()@chloroplast <-> X5P_ch()@chloroplast + E4P_ch()@chloroplast r7_F_TKL_v,fRate6m()
	E8: DHAP_ch()@chloroplast + E4P_ch()@chloroplast <-> SBP_ch()@chloroplast r8_E_Aldo_v,fRate7m()
	E9: SBP_ch()@chloroplast -> Pi_ch(adp_ch)@chloroplast + S7P_ch()@chloroplast fRate8()
	E10: S7P_ch()@chloroplast + GAP_ch()@chloroplast <-> R5P_ch(u~0)@chloroplast + X5P_ch()@chloroplast r10_G_TKL_v,fRate9m()
	E11: R5P_ch(u~0)@chloroplast <-> R5P_ch(u~U)@chloroplast r11_R5Piso_v,fRate10m()
	E12: X5P_ch()@chloroplast <-> R5P_ch(u~U)@chloroplast r12_X5Pepi_v,fRate11m()
	E13: R5P_ch(u~U)@chloroplast + Pi_ch(adp_ch!17)@chloroplast.ADP_ch(pi_ch!17)@chloroplast -> RuBP_ch()@chloroplast + ADP_ch(pi_ch)@chloroplast fRate12() #Modifiers(PGA_ch, Pi_ch)
	E14: F6P_ch()@chloroplast <-> G6P_ch()@chloroplast r14_PGI_v,fRate13m()
	E15: G6P_ch()@chloroplast <-> G1P_ch()@chloroplast r15_PGM_v,fRate14m()
	light_reaction: Pi_ch(adp_ch)@chloroplast + ADP_ch(pi_ch)@chloroplast -> Pi_ch(adp_ch!17)@chloroplast.ADP_ch(pi_ch!17)@chloroplast fRate15()
	E16: Pi_ch(adp_ch!17)@chloroplast.ADP_ch(pi_ch!17)@chloroplast + G1P_ch()@chloroplast -> x_Starch_ch()@chloroplast + ADP_ch(pi_ch)@chloroplast + Pi_ch(adp_ch)@chloroplast + Pi_ch(adp_ch)@chloroplast fRate16() #Modifiers(PGA_ch, F6P_ch, FBP_ch)
	E17_reactants_0: 0  -> x_Starch_ch()@chloroplast -1*(fRate17())
	E17_reactants_1: 0  -> Pi_ch(adp_ch)@chloroplast -1*(fRate17())
	E17_products_0: 0  -> G1P_ch()@chloroplast fRate17()
	E18_DHAP_reactants_0: 0  -> x_Pi_cyt()@cytosol -1*(fRate18()) #Modifiers(PGA_ch, GAP_ch)
	E18_DHAP_reactants_1: 0  -> DHAP_ch()@chloroplast -1*(fRate18()) #Modifiers(PGA_ch, GAP_ch)
	E18_DHAP_products_0: 0  -> x_DHAP_cyt()@cytosol fRate18() #Modifiers(PGA_ch, GAP_ch)
	E18_DHAP_products_1: 0  -> Pi_ch(adp_ch)@chloroplast fRate18() #Modifiers(PGA_ch, GAP_ch)
	E18_PGA_reactants_0: 0  -> x_Pi_cyt()@cytosol -1*(fRate19()) #Modifiers(DHAP_ch, GAP_ch)
	E18_PGA_reactants_1: 0  -> PGA_ch()@chloroplast -1*(fRate19()) #Modifiers(DHAP_ch, GAP_ch)
	E18_PGA_products_0: 0  -> x_PGA_cyt()@cytosol fRate19() #Modifiers(DHAP_ch, GAP_ch)
	E18_PGA_products_1: 0  -> Pi_ch(adp_ch)@chloroplast fRate19() #Modifiers(DHAP_ch, GAP_ch)
	E18_GAP_reactants_0: 0  -> x_Pi_cyt()@cytosol -1*(fRate20()) #Modifiers(PGA_ch, DHAP_ch)
	E18_GAP_reactants_1: 0  -> GAP_ch()@chloroplast -1*(fRate20()) #Modifiers(PGA_ch, DHAP_ch)
	E18_GAP_products_0: 0  -> x_GAP_cyt()@cytosol fRate20() #Modifiers(PGA_ch, DHAP_ch)
	E18_GAP_products_1: 0  -> Pi_ch(adp_ch)@chloroplast fRate20() #Modifiers(PGA_ch, DHAP_ch)
end reaction rules
end model
