###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000014', 'http://identifiers.org/biomodels.db/MODEL6616691524']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/10823939']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/biomodels.db/BIOMD0000000011']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0005078', 'http://identifiers.org/go/GO:0000165']
#@BQB_IS_HOMOLOG_TO:['http://identifiers.org/reactome/REACT_634']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/8355']
#@creatorEmail:'bshapiro@jpl.nasa.gov'
#@creatorName:'Shapiro Bruce'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 86 molecules and 300 reactions. The translated model has 8 molecules and 300 rules'
###
begin model
begin parameters
	r1_a1 1.000000
	r2_d1 0.400000
	r3_k1 0.100000
	r4_a2 0.500000
	r5_d2 0.500000
	r6_k2 0.100000
	r7_a3 3.300000
	r8_d3 0.420000
	r9_k3 0.100000
	r10_a4 10.000000
	r11_d4 0.800000
	r12_k4 0.100000
	r13_a5 3.300000
	r14_d5 0.400000
	r15_k5 0.100000
	r16_a6 10.000000
	r17_d6 0.800000
	r18_k6 0.100000
	r19_a7 20.000000
	r20_d7 0.600000
	r21_k7 0.100000
	r22_a8 5.000000
	r23_d8 0.400000
	r24_k8 0.100000
	r25_a9 20.000000
	r26_d9 0.600000
	r27_k9 0.100000
	r28_a10 5.000000
	r29_d10 0.400000
	r30_k10 0.100000
	r31_kon 10.000000
	r32_koff 0.500000
	r33_kon 10.000000
	r34_koff 0.500000
	r35_kon 10.000000
	r36_koff 0.500000
	r37_kon 10.000000
	r38_koff 0.500000
	r39_kon 10.000000
	r40_koff 0.500000
	r41_kon 10.000000
	r42_koff 0.500000
	r43_kon 10.000000
	r44_koff 0.500000
	r45_kon 10.000000
	r46_koff 0.500000
	r47_kon 10.000000
	r48_koff 0.500000
	r49_kon 10.000000
	r50_koff 0.500000
	r51_kon 10.000000
	r52_koff 0.500000
	r53_kon 10.000000
	r54_koff 0.500000
	r55_kpon 0.000000
	r56_kpoff 0.050000
	r57_kpon 0.000000
	r58_kpoff 0.050000
	r59_kpon 0.000000
	r60_kpoff 0.050000
	r61_kpon 0.000000
	r62_kpoff 0.050000
	r63_kpon 0.000000
	r64_kpoff 0.050000
	r65_kpon 0.000000
	r66_kpoff 0.050000
	r67_kpon 0.000000
	r68_kpoff 0.050000
	r69_kpon 0.000000
	r70_kpoff 0.050000
	r71_kpon 0.000000
	r72_kpoff 0.050000
	r73_kpon 0.000000
	r74_kpoff 0.050000
	r75_kpon 0.000000
	r76_kpoff 0.050000
	r77_kpon 0.000000
	r78_kpoff 0.050000
	r79_kpon 0.000000
	r80_kpoff 0.050000
	r81_kpon 0.000000
	r82_kpoff 0.050000
	r83_kpon 0.000000
	r84_kpoff 0.050000
	r85_kpon 0.000000
	r86_kpoff 0.050000
	r87_kpon 0.000000
	r88_kpoff 0.050000
	r89_kpon 0.000000
	r90_kpoff 0.050000
	r91_kpon 0.000000
	r92_kpoff 0.050000
	r93_kpon 0.000000
	r94_kpoff 0.050000
	r95_kpon 0.000000
	r96_kpoff 0.050000
	r97_kpon 0.000000
	r98_kpoff 0.050000
	r99_kpon 0.000000
	r100_kpoff 0.050000
	r101_kpon 0.000000
	r102_kpoff 0.050000
	r103_kon 10.000000
	r104_koff 0.500000
	r105_kon 10.000000
	r106_koff 0.500000
	r107_kon 10.000000
	r108_koff 0.500000
	r109_kpon 0.000000
	r110_kpoff 0.050000
	r111_kpon 0.000000
	r112_kpoff 0.050000
	r113_kpon 0.000000
	r114_kpoff 0.050000
	r115_kpon 0.000000
	r116_kpoff 0.050000
	r117_kpon 0.000000
	r118_kpoff 0.050000
	r119_kpon 0.000000
	r120_kpoff 0.050000
	r121_kon 10.000000
	r122_koff 0.500000
	r123_kon 10.000000
	r124_koff 0.500000
	r125_kon 10.000000
	r126_koff 0.500000
	r127_kpon 0.000000
	r128_kpoff 0.050000
	r129_kpon 0.000000
	r130_kpoff 0.050000
	r131_kpon 0.000000
	r132_kpoff 0.050000
	r133_kpon 0.000000
	r134_kpoff 0.050000
	r135_kpon 0.000000
	r136_kpoff 0.050000
	r137_kpon 0.000000
	r138_kpoff 0.050000
	r139_kon 10.000000
	r140_koff 0.500000
	r141_kon 10.000000
	r142_koff 0.500000
	r143_kon 10.000000
	r144_koff 0.500000
	r145_kpon 0.000000
	r146_kpoff 0.050000
	r147_kpon 0.000000
	r148_kpoff 0.050000
	r149_kpon 0.000000
	r150_kpoff 0.050000
	r151_kpon 0.000000
	r152_kpoff 0.050000
	r153_kpon 0.000000
	r154_kpoff 0.050000
	r155_kpon 0.000000
	r156_kpoff 0.050000
	r157_kon 10.000000
	r158_koff 0.500000
	r159_kon 10.000000
	r160_koff 0.500000
	r161_kon 10.000000
	r162_koff 0.500000
	r163_kpon 0.000000
	r164_kpoff 0.050000
	r165_kpon 0.000000
	r166_kpoff 0.050000
	r167_kpon 0.000000
	r168_kpoff 0.050000
	r169_kpon 0.000000
	r170_kpoff 0.050000
	r171_kpon 0.000000
	r172_kpoff 0.050000
	r173_kpon 0.000000
	r174_kpoff 0.050000
	r175_kon 10.000000
	r176_koff 0.500000
	r177_kpon 0.000000
	r178_kpoff 0.050000
	r179_kon 10.000000
	r180_koff 0.500000
	r181_kpon 0.000000
	r182_kpoff 0.050000
	r183_kon 10.000000
	r184_koff 0.500000
	r185_kpon 0.000000
	r186_kpoff 0.050000
	r187_kon 10.000000
	r188_koff 0.500000
	r189_kpon 0.000000
	r190_kpoff 0.050000
	r191_kon 10.000000
	r192_koff 0.500000
	r193_kpon 0.000000
	r194_kpoff 0.050000
	r195_kon 10.000000
	r196_koff 0.500000
	r197_kpon 0.000000
	r198_kpoff 0.050000
	r199_kon 10.000000
	r200_koff 0.500000
	r201_kpon 0.000000
	r202_kpoff 0.050000
	r203_kon 10.000000
	r204_koff 0.500000
	r205_kpon 0.000000
	r206_kpoff 0.050000
	r207_kon 10.000000
	r208_koff 0.500000
	r209_kpon 0.000000
	r210_kpoff 0.050000
	r211_kon 10.000000
	r212_koff 0.500000
	r213_kpon 0.000000
	r214_kpoff 0.050000
	r215_kon 10.000000
	r216_koff 0.500000
	r217_kpon 0.000000
	r218_kpoff 0.050000
	r219_kon 10.000000
	r220_koff 0.500000
	r221_kpon 0.000000
	r222_kpoff 0.050000
	r223_kon 10.000000
	r224_koff 0.500000
	r225_kpon 0.000000
	r226_kpoff 0.050000
	r227_kon 10.000000
	r228_koff 0.500000
	r229_kpon 0.000000
	r230_kpoff 0.050000
	r231_kon 10.000000
	r232_koff 0.500000
	r233_kpon 0.000000
	r234_kpoff 0.050000
	r235_kon 10.000000
	r236_koff 0.500000
	r237_kpon 0.000000
	r238_kpoff 0.050000
	r239_k7 0.100000
	r240_k7 0.100000
	r241_k7 0.100000
	r242_k9a 0.100000
	r243_k9a 0.100000
	r244_k9a 0.100000
	r245_k3 0.100000
	r246_k5a 0.100000
	r247_k3 0.100000
	r248_k5a 0.100000
	r249_k3 0.100000
	r250_k5a 0.100000
	r251_k3 0.100000
	r252_k5a 0.100000
	r253_k1a 100.000000
	r254_d1a 0.000000
	r255_k1 0.100000
	r256_k1a 100.000000
	r257_d1a 0.000000
	r258_k1 0.100000
	r259_k1a 100.000000
	r260_d1a 0.000000
	r261_k1 0.100000
	r262_k1a 100.000000
	r263_d1a 0.000000
	r264_k1 0.100000
	r265_k1a 100.000000
	r266_d1a 0.000000
	r267_k1 0.100000
	r268_k1a 100.000000
	r269_d1a 0.000000
	r270_k1 0.100000
	r271_k1a 100.000000
	r272_d1a 0.000000
	r273_k1 0.100000
	r274_k1a 100.000000
	r275_d1a 0.000000
	r276_k1 0.100000
	r277_k1a 100.000000
	r278_d1a 0.000000
	r279_k1 0.100000
	r280_k1a 100.000000
	r281_d1a 0.000000
	r282_k1 0.100000
	r283_k1a 100.000000
	r284_d1a 0.000000
	r285_k1 0.100000
	r286_k1a 100.000000
	r287_d1a 0.000000
	r288_k1 0.100000
	r289_k1a 100.000000
	r290_d1a 0.000000
	r291_k1 0.100000
	r292_k1a 100.000000
	r293_d1a 0.000000
	r294_k1 0.100000
	r295_k1a 100.000000
	r296_d1a 0.000000
	r297_k1 0.100000
	r298_k1a 100.000000
	r299_d1a 0.000000
	r300_k1 0.100000
end parameters
begin molecule types
	#^ bqbiol:isVersionOf uniprot:Q05116
	MEK(_p~_P~0,mapk,mekphosphatase,p~P~0,raf,scaffold)
	#^ bqbiol:isVersionOf uniprot:P26696
	MAPK(_p~_P~0,mapkpase,mek,p~P~0,scaffold)
	Scaffold(mapk,mek,raf)
	#^ bqbiol:isVersionOf uniprot:P09560
	RAF(_p~_P~0,mek,rafkinase,rafphosphatase,scaffold)
	RAFphosphatase(raf)
	MEKphosphatase(mek)
	MAPKPase(hosphat~HOSPHAT~0,mapk)
	#^ bqbiol:isVersionOf interpro:IPR003577
	RAFkinase(raf)
end molecule types
begin seed species
	MAPKPase(hosphat~HOSPHAT,mapk) 0.3 #MAPKphosphatase #MAPKP
	MEKphosphatase(mek) 0.2 #MEKphosphatase #MEKP
	RAFkinase(raf) 0.1 #RAFkinase #RAFK
	RAFphosphatase(raf) 0.3 #RAFphosphatase #RAFP
	MAPK(_p~0,mapkpase,mek,p~0,scaffold) 0.4 #MAPK #K_1_0
	MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold) 0.2 #MEK #K_2_0
	RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) 0.3 #RAF #K_3_0
	Scaffold(mapk,mek,raf) 0.1 #Scaffold #S_m1_m1_m1
end seed species
begin observables
	Species MAPKphosphatase MAPKPase(hosphat~HOSPHAT,mapk) #MAPK phosphatase
	Species MEKphosphatase MEKphosphatase(mek) #MEK phosphatase
	Species RAFkinase RAFkinase(raf) #RAF kinase
	Species RAFphosphatase RAFphosphatase(raf) #RAF phosphatase
	Species MAPK MAPK(_p~0,mapkpase,mek,p~0,scaffold) #MAPK
	Species MAPK_P MAPK(_p~_P,mapkpase,mek,p~0,scaffold) #MAPK-P
	Species MAPK_PP MAPK(_p~_P,mapkpase,mek,p~P,scaffold) #MAPK-PP
	Species MEK MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold) #MEK
	Species MEK_P MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold) #MEK-P
	Species MEK_PP MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) #MEK-PP
	Species RAF RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) #RAF
	Species RAF_P RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) #RAF-P
	Species MAPK_MEK_PP MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold) #MAPK_MEK-PP
	Species MAPK_P_MEK_PP MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold) #MAPK-P_MEK-PP
	Species MEK_RAF_P MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold) #MEK_RAF-P
	Species MEK_P_RAF_P MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold) #MEK-P_RAF-P
	Species MAPK_P_MAPKPase MAPK(_p~_P,mapkpase!15,mek,p~0,scaffold).MAPKPase(hosphat~0,mapk!15) #MAPK-P_MAPKPase
	Species MAPK_PP_MAPKPase MAPK(_p~_P,mapkpase!15,mek,p~P,scaffold).MAPKPase(hosphat~0,mapk!15) #MAPK-PP_MAPKPase
	Species MEK_P_MEKPase MEK(_p~_P,mapk,mekphosphatase!14,p~0,raf,scaffold).MEKphosphatase(mek!14) #MEK-P_MEKPase
	Species MEK_PP_MEKPase MEK(_p~_P,mapk,mekphosphatase!14,p~P,raf,scaffold).MEKphosphatase(mek!14) #MEK-PP_MEKPase
	Species RAF_RAFK RAF(_p~0,mek,rafkinase!18,rafphosphatase,scaffold).RAFkinase(raf!18) #RAF_RAFK
	Species RAF_P_RAFPase RAF(_p~_P,mek,rafkinase,rafphosphatase!13,scaffold).RAFphosphatase(raf!13) #RAF-P_RAFPase
	Species Scaffold Scaffold(mapk,mek,raf) #Scaffold
	Species Scaffold_RAF RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) #Scaffold_RAF
	Species Scaffold_RAF_P RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) #Scaffold_RAF-P
	Species Scaffold_MEK MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold!20).Scaffold(mapk,mek!20,raf) #Scaffold_MEK
	Species Scaffold_MEK_RAF MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) #Scaffold_MEK_RAF
	Species Scaffold_MEK_RAF_P MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) #Scaffold_MEK_RAF-P
	Species Scaffold_MEK_P MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold!20).Scaffold(mapk,mek!20,raf) #Scaffold_MEK-P
	Species Scaffold_MEK_P_RAF MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) #Scaffold_MEK-P_RAF
	Species Scaffold_MEK_P_RAF_P MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) #Scaffold_MEK-P_RAF-P
	Species Scaffold_MEK_PP MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold!20).Scaffold(mapk,mek!20,raf) #Scaffold_MEK-PP
	Species Scaffold_MEK_PP_RAF MEK(_p~_P,mapk,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) #Scaffold_MEK-PP_RAF
	Species Scaffold_MEK_PP_RAF_P MEK(_p~_P,mapk,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) #Scaffold_MEK-PP_RAF-P
	Species Scaffold_MAPK MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf) #Scaffold_MAPK
	Species Scaffold_MAPK_RAF RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) #Scaffold_MAPK_RAF
	Species Scaffold_MAPK_RAF_P RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) #Scaffold_MAPK_RAF-P
	Species Scaffold_MAPK_MEK MEK(_p~0,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) #Scaffold_MAPK_MEK
	Species Scaffold_MAPK_MEK_RAF MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) #Scaffold_MAPK_MEK_RAF
	Species Scaffold_MAPK_MEK_RAF_P MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) #Scaffold_MAPK_MEK_RAF-P
	Species Scaffold_MAPK_MEK_P MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) #Scaffold_MAPK_MEK-P
	Species Scaffold_MAPK_MEK_P_RAF MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) #Scaffold_MAPK_MEK-P_RAF
	Species Scaffold_MAPK_MEK_P_RAF_P MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) #Scaffold_MAPK_MEK-P_RAF-P
	Species Scaffold_MAPK_MEK_PP MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold!20).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) #Scaffold_MAPK_MEK-PP
	Species Scaffold_MAPK_MEK_PP_RAF MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) #Scaffold_MAPK_MEK-PP_RAF
	Species Scaffold_MAPK_MEK_PP_RAF_P MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) #Scaffold_MAPK_MEK-PP_RAF-P
	Species Scaffold_MAPK_P MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf) #Scaffold_MAPK-P
	Species Scaffold_MAPK_P_RAF RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) #Scaffold_MAPK-P_RAF
	Species Scaffold_MAPK_P_RAF_P RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) #Scaffold_MAPK-P_RAF-P
	Species Scaffold_MAPK_P_MEK MEK(_p~0,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) #Scaffold_MAPK-P_MEK
	Species Scaffold_MAPK_P_MEK_RAF MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) #Scaffold_MAPK-P_MEK_RAF
	Species Scaffold_MAPK_P_MEK_RAF_P MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) #Scaffold_MAPK-P_MEK_RAF-P
	Species Scaffold_MAPK_P_MEK_P MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) #Scaffold_MAPK-P_MEK-P
	Species Scaffold_MAPK_P_MEK_P_RAF MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) #Scaffold_MAPK-P_MEK-P_RAF
	Species Scaffold_MAPK_P_MEK_P_RAF_P MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) #Scaffold_MAPK-P_MEK-P_RAF-P
	Species Scaffold_MAPK_P_MEK_PP MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) #Scaffold_MAPK-P_MEK-PP
	Species Scaffold_MAPK_P_MEK_PP_RAF MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) #Scaffold_MAPK-P_MEK-PP_RAF
	Species Scaffold_MAPK_P_MEK_PP_RAF_P MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) #Scaffold_MAPK-P_MEK-PP_RAF-P
	Species Scaffold_MAPK_PP MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf) #Scaffold_MAPK-PP
	Species Scaffold_MAPK_PP_RAF RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf!19) #Scaffold_MAPK-PP_RAF
	Species Scaffold_MAPK_PP_RAF_P RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf!19) #Scaffold_MAPK-PP_RAF-P
	Species Scaffold_MAPK_PP_MEK MEK(_p~0,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf) #Scaffold_MAPK-PP_MEK
	Species Scaffold_MAPK_PP_MEK_RAF MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) #Scaffold_MAPK-PP_MEK_RAF
	Species Scaffold_MAPK_PP_MEK_RAF_P MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) #Scaffold_MAPK-PP_MEK_RAF-P
	Species Scaffold_MAPK_PP_MEK_P MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf) #Scaffold_MAPK-PP_MEK-P
	Species Scaffold_MAPK_PP_MEK_P_RAF MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) #Scaffold_MAPK-PP_MEK-P_RAF
	Species Scaffold_MAPK_PP_MEK_P_RAF_P MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) #Scaffold_MAPK-PP_MEK-P_RAF-P
	Species Scaffold_MAPK_PP_MEK_PP MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf) #Scaffold_MAPK-PP_MEK-PP
	Species Scaffold_MAPK_PP_MEK_PP_RAF MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) #Scaffold_MAPK-PP_MEK-PP_RAF
	Species Scaffold_MAPK_PP_MEK_PP_RAF_P MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) #Scaffold_MAPK-PP_MEK-PP_RAF-P
	Species Scaffold_RAF_S_RAFK_m1_m1_0 RAF(_p~0,mek,rafkinase!18,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19).RAFkinase(raf!18) #Scaffold_RAF
	Species Scaffold_MEK_RAF_S_RAFK_m1_0_0 MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19).RAFkinase(raf!18) #Scaffold_MEK_RAF
	Species Scaffold_MEK_P_RAF_S_RAFK_m1_1_0 MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19).RAFkinase(raf!18) #Scaffold_MEK-P_RAF
	Species Scaffold_MEK_PP_RAF_S_RAFK_m1_2_0 MEK(_p~_P,mapk,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19).RAFkinase(raf!18) #Scaffold_MEK-PP_RAF
	Species Scaffold_MAPK_RAF_S_RAFK_0_m1_0 RAF(_p~0,mek,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19).RAFkinase(raf!18) #Scaffold_MAPK_RAF
	Species Scaffold_MAPK_MEK_RAF_S_RAFK_0_0_0 MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) #Scaffold_MAPK_MEK_RAF
	Species Scaffold_MAPK_MEK_P_RAF_S_RAFK_0_1_0 MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) #Scaffold_MAPK_MEK-P_RAF
	Species Scaffold_MAPK_MEK_PP_RAF_S_RAFK_0_2_0 MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) #Scaffold_MAPK_MEK-PP_RAF
	Species Scaffold_MAPK_P_RAF_S_RAFK_1_m1_0 RAF(_p~0,mek,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19).RAFkinase(raf!18) #Scaffold_MAPK-P_RAF
	Species Scaffold_MAPK_P_MEK_RAF_S_RAFK_1_0_0 MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) #Scaffold_MAPK-P_MEK_RAF
	Species Scaffold_MAPK_P_MEK_P_RAF_S_RAFK_1_1_0 MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) #Scaffold_MAPK-P_MEK-P_RAF
	Species Scaffold_MAPK_P_MEK_PP_RAF_S_RAFK_1_2_0 MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) #Scaffold_MAPK-P_MEK-PP_RAF
	Species Scaffold_MAPK_PP_RAF_S_RAFK_2_m1_0 RAF(_p~0,mek,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf!19).RAFkinase(raf!18) #Scaffold_MAPK-PP_RAF
	Species Scaffold_MAPK_PP_MEK_RAF_S_RAFK_2_0_0 MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) #Scaffold_MAPK-PP_MEK_RAF
	Species Scaffold_MAPK_PP_MEK_P_RAF_S_RAFK_2_1_0 MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) #Scaffold_MAPK-PP_MEK-P_RAF
	Species Scaffold_MAPK_PP_MEK_PP_RAF_S_RAFK_2_2_0 MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) #Scaffold_MAPK-PP_MEK-PP_RAF
end observables
begin reaction rules
	Reaction1: RAFkinase(raf) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) -> RAF(_p~0,mek,rafkinase!18,rafphosphatase,scaffold).RAFkinase(raf!18) r1_a1
	Reaction2: RAF(_p~0,mek,rafkinase!18,rafphosphatase,scaffold).RAFkinase(raf!18) -> RAFkinase(raf) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) r2_d1
	Reaction3: RAF(_p~0,mek,rafkinase!18,rafphosphatase,scaffold).RAFkinase(raf!18) -> RAFkinase(raf) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) r3_k1
	Reaction4: RAFphosphatase(raf) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) -> RAF(_p~_P,mek,rafkinase,rafphosphatase!13,scaffold).RAFphosphatase(raf!13) r4_a2
	Reaction5: RAF(_p~_P,mek,rafkinase,rafphosphatase!13,scaffold).RAFphosphatase(raf!13) -> RAFphosphatase(raf) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) r5_d2
	Reaction6: RAF(_p~_P,mek,rafkinase,rafphosphatase!13,scaffold).RAFphosphatase(raf!13) -> RAFphosphatase(raf) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) r6_k2
	Reaction7: MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) -> MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold) r7_a3
	Reaction8: MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold) -> MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) r8_d3
	Reaction9: MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold) -> MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) r9_k3
	Reaction10: MEKphosphatase(mek) + MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold) -> MEK(_p~_P,mapk,mekphosphatase!14,p~0,raf,scaffold).MEKphosphatase(mek!14) r10_a4
	Reaction11: MEK(_p~_P,mapk,mekphosphatase!14,p~0,raf,scaffold).MEKphosphatase(mek!14) -> MEKphosphatase(mek) + MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold) r11_d4
	Reaction12: MEK(_p~_P,mapk,mekphosphatase!14,p~0,raf,scaffold).MEKphosphatase(mek!14) -> MEKphosphatase(mek) + MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold) r12_k4
	Reaction13: MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) -> MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold) r13_a5
	Reaction14: MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold) -> MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) r14_d5
	Reaction15: MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold) -> MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) r15_k5
	Reaction16: MEKphosphatase(mek) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) -> MEK(_p~_P,mapk,mekphosphatase!14,p~P,raf,scaffold).MEKphosphatase(mek!14) r16_a6
	Reaction17: MEK(_p~_P,mapk,mekphosphatase!14,p~P,raf,scaffold).MEKphosphatase(mek!14) -> MEKphosphatase(mek) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) r17_d6
	Reaction18: MEK(_p~_P,mapk,mekphosphatase!14,p~P,raf,scaffold).MEKphosphatase(mek!14) -> MEKphosphatase(mek) + MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold) r18_k6
	Reaction19: MAPK(_p~0,mapkpase,mek,p~0,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold) r19_a7
	Reaction20: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold) -> MAPK(_p~0,mapkpase,mek,p~0,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) r20_d7
	Reaction21: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold) -> MAPK(_p~_P,mapkpase,mek,p~0,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) r21_k7
	Reaction22: MAPKPase(hosphat~HOSPHAT,mapk) + MAPK(_p~_P,mapkpase,mek,p~0,scaffold) -> MAPK(_p~_P,mapkpase!15,mek,p~0,scaffold).MAPKPase(hosphat~0,mapk!15) r22_a8
	Reaction23: MAPK(_p~_P,mapkpase!15,mek,p~0,scaffold).MAPKPase(hosphat~0,mapk!15) -> MAPKPase(hosphat~HOSPHAT,mapk) + MAPK(_p~_P,mapkpase,mek,p~0,scaffold) r23_d8
	Reaction24: MAPK(_p~_P,mapkpase!15,mek,p~0,scaffold).MAPKPase(hosphat~0,mapk!15) -> MAPKPase(hosphat~HOSPHAT,mapk) + MAPK(_p~0,mapkpase,mek,p~0,scaffold) r24_k8
	Reaction25: MAPK(_p~_P,mapkpase,mek,p~0,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold) r25_a9
	Reaction26: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold) -> MAPK(_p~_P,mapkpase,mek,p~0,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) r26_d9
	Reaction27: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold) -> MAPK(_p~_P,mapkpase,mek,p~P,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) r27_k9
	Reaction28: MAPKPase(hosphat~HOSPHAT,mapk) + MAPK(_p~_P,mapkpase,mek,p~P,scaffold) -> MAPK(_p~_P,mapkpase!15,mek,p~P,scaffold).MAPKPase(hosphat~0,mapk!15) r28_a10
	Reaction29: MAPK(_p~_P,mapkpase!15,mek,p~P,scaffold).MAPKPase(hosphat~0,mapk!15) -> MAPKPase(hosphat~HOSPHAT,mapk) + MAPK(_p~_P,mapkpase,mek,p~P,scaffold) r29_d10
	Reaction30: MAPK(_p~_P,mapkpase!15,mek,p~P,scaffold).MAPKPase(hosphat~0,mapk!15) -> MAPKPase(hosphat~HOSPHAT,mapk) + MAPK(_p~_P,mapkpase,mek,p~0,scaffold) r30_k10
	Reaction31: MAPK(_p~0,mapkpase,mek,p~0,scaffold) + Scaffold(mapk,mek,raf) -> MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf) r31_kon
	Reaction32: MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf) -> MAPK(_p~0,mapkpase,mek,p~0,scaffold) + Scaffold(mapk,mek,raf) r32_koff
	Reaction33: MAPK(_p~0,mapkpase,mek,p~0,scaffold) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) -> RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) r33_kon
	Reaction34: RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> MAPK(_p~0,mapkpase,mek,p~0,scaffold) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) r34_koff
	Reaction35: MAPK(_p~0,mapkpase,mek,p~0,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) -> RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) r35_kon
	Reaction36: RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> MAPK(_p~0,mapkpase,mek,p~0,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) r36_koff
	Reaction37: MAPK(_p~0,mapkpase,mek,p~0,scaffold) + MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold!20).Scaffold(mapk,mek!20,raf) -> MEK(_p~0,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) r37_kon
	Reaction38: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MAPK(_p~0,mapkpase,mek,p~0,scaffold) + MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold!20).Scaffold(mapk,mek!20,raf) r38_koff
	Reaction39: MAPK(_p~0,mapkpase,mek,p~0,scaffold) + MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r39_kon
	Reaction40: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MAPK(_p~0,mapkpase,mek,p~0,scaffold) + MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r40_koff
	Reaction41: MAPK(_p~0,mapkpase,mek,p~0,scaffold) + MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r41_kon
	Reaction42: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MAPK(_p~0,mapkpase,mek,p~0,scaffold) + MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r42_koff
	Reaction43: MAPK(_p~0,mapkpase,mek,p~0,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold!20).Scaffold(mapk,mek!20,raf) -> MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) r43_kon
	Reaction44: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MAPK(_p~0,mapkpase,mek,p~0,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold!20).Scaffold(mapk,mek!20,raf) r44_koff
	Reaction45: MAPK(_p~0,mapkpase,mek,p~0,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r45_kon
	Reaction46: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MAPK(_p~0,mapkpase,mek,p~0,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r46_koff
	Reaction47: MAPK(_p~0,mapkpase,mek,p~0,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r47_kon
	Reaction48: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MAPK(_p~0,mapkpase,mek,p~0,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r48_koff
	Reaction49: MAPK(_p~0,mapkpase,mek,p~0,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold!20).Scaffold(mapk,mek!20,raf) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold!20).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) r49_kon
	Reaction50: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold!20).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MAPK(_p~0,mapkpase,mek,p~0,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold!20).Scaffold(mapk,mek!20,raf) r50_koff
	Reaction51: MAPK(_p~0,mapkpase,mek,p~0,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r51_kon
	Reaction52: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MAPK(_p~0,mapkpase,mek,p~0,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r52_koff
	Reaction53: MAPK(_p~0,mapkpase,mek,p~0,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r53_kon
	Reaction54: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MAPK(_p~0,mapkpase,mek,p~0,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r54_koff
	Reaction55: MAPK(_p~_P,mapkpase,mek,p~0,scaffold) + Scaffold(mapk,mek,raf) -> MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf) r55_kpon
	Reaction56: MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf) -> MAPK(_p~_P,mapkpase,mek,p~0,scaffold) + Scaffold(mapk,mek,raf) r56_kpoff
	Reaction57: MAPK(_p~_P,mapkpase,mek,p~0,scaffold) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) -> RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) r57_kpon
	Reaction58: RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> MAPK(_p~_P,mapkpase,mek,p~0,scaffold) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) r58_kpoff
	Reaction59: MAPK(_p~_P,mapkpase,mek,p~0,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) -> RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) r59_kpon
	Reaction60: RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> MAPK(_p~_P,mapkpase,mek,p~0,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) r60_kpoff
	Reaction61: MAPK(_p~_P,mapkpase,mek,p~0,scaffold) + MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold!20).Scaffold(mapk,mek!20,raf) -> MEK(_p~0,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) r61_kpon
	Reaction62: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MAPK(_p~_P,mapkpase,mek,p~0,scaffold) + MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold!20).Scaffold(mapk,mek!20,raf) r62_kpoff
	Reaction63: MAPK(_p~_P,mapkpase,mek,p~0,scaffold) + MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r63_kpon
	Reaction64: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MAPK(_p~_P,mapkpase,mek,p~0,scaffold) + MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r64_kpoff
	Reaction65: MAPK(_p~_P,mapkpase,mek,p~0,scaffold) + MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r65_kpon
	Reaction66: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MAPK(_p~_P,mapkpase,mek,p~0,scaffold) + MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r66_kpoff
	Reaction67: MAPK(_p~_P,mapkpase,mek,p~0,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold!20).Scaffold(mapk,mek!20,raf) -> MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) r67_kpon
	Reaction68: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MAPK(_p~_P,mapkpase,mek,p~0,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold!20).Scaffold(mapk,mek!20,raf) r68_kpoff
	Reaction69: MAPK(_p~_P,mapkpase,mek,p~0,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r69_kpon
	Reaction70: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MAPK(_p~_P,mapkpase,mek,p~0,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r70_kpoff
	Reaction71: MAPK(_p~_P,mapkpase,mek,p~0,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r71_kpon
	Reaction72: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MAPK(_p~_P,mapkpase,mek,p~0,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r72_kpoff
	Reaction73: MAPK(_p~_P,mapkpase,mek,p~0,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold!20).Scaffold(mapk,mek!20,raf) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) r73_kpon
	Reaction74: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MAPK(_p~_P,mapkpase,mek,p~0,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold!20).Scaffold(mapk,mek!20,raf) r74_kpoff
	Reaction75: MAPK(_p~_P,mapkpase,mek,p~0,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r75_kpon
	Reaction76: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MAPK(_p~_P,mapkpase,mek,p~0,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r76_kpoff
	Reaction77: MAPK(_p~_P,mapkpase,mek,p~0,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r77_kpon
	Reaction78: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MAPK(_p~_P,mapkpase,mek,p~0,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r78_kpoff
	Reaction79: MAPK(_p~_P,mapkpase,mek,p~P,scaffold) + Scaffold(mapk,mek,raf) -> MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf) r79_kpon
	Reaction80: MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf) -> MAPK(_p~_P,mapkpase,mek,p~P,scaffold) + Scaffold(mapk,mek,raf) r80_kpoff
	Reaction81: MAPK(_p~_P,mapkpase,mek,p~P,scaffold) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) -> RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf!19) r81_kpon
	Reaction82: RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> MAPK(_p~_P,mapkpase,mek,p~P,scaffold) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) r82_kpoff
	Reaction83: MAPK(_p~_P,mapkpase,mek,p~P,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) -> RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf!19) r83_kpon
	Reaction84: RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> MAPK(_p~_P,mapkpase,mek,p~P,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) r84_kpoff
	Reaction85: MAPK(_p~_P,mapkpase,mek,p~P,scaffold) + MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold!20).Scaffold(mapk,mek!20,raf) -> MEK(_p~0,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf) r85_kpon
	Reaction86: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MAPK(_p~_P,mapkpase,mek,p~P,scaffold) + MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold!20).Scaffold(mapk,mek!20,raf) r86_kpoff
	Reaction87: MAPK(_p~_P,mapkpase,mek,p~P,scaffold) + MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r87_kpon
	Reaction88: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MAPK(_p~_P,mapkpase,mek,p~P,scaffold) + MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r88_kpoff
	Reaction89: MAPK(_p~_P,mapkpase,mek,p~P,scaffold) + MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r89_kpon
	Reaction90: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MAPK(_p~_P,mapkpase,mek,p~P,scaffold) + MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r90_kpoff
	Reaction91: MAPK(_p~_P,mapkpase,mek,p~P,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold!20).Scaffold(mapk,mek!20,raf) -> MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf) r91_kpon
	Reaction92: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MAPK(_p~_P,mapkpase,mek,p~P,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold!20).Scaffold(mapk,mek!20,raf) r92_kpoff
	Reaction93: MAPK(_p~_P,mapkpase,mek,p~P,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r93_kpon
	Reaction94: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MAPK(_p~_P,mapkpase,mek,p~P,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r94_kpoff
	Reaction95: MAPK(_p~_P,mapkpase,mek,p~P,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r95_kpon
	Reaction96: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MAPK(_p~_P,mapkpase,mek,p~P,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r96_kpoff
	Reaction97: MAPK(_p~_P,mapkpase,mek,p~P,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold!20).Scaffold(mapk,mek!20,raf) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf) r97_kpon
	Reaction98: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MAPK(_p~_P,mapkpase,mek,p~P,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold!20).Scaffold(mapk,mek!20,raf) r98_kpoff
	Reaction99: MAPK(_p~_P,mapkpase,mek,p~P,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r99_kpon
	Reaction100: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MAPK(_p~_P,mapkpase,mek,p~P,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r100_kpoff
	Reaction101: MAPK(_p~_P,mapkpase,mek,p~P,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r101_kpon
	Reaction102: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MAPK(_p~_P,mapkpase,mek,p~P,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r102_kpoff
	Reaction103: MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold) + Scaffold(mapk,mek,raf) -> MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold!20).Scaffold(mapk,mek!20,raf) r103_kon
	Reaction104: MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold!20).Scaffold(mapk,mek!20,raf) -> MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold) + Scaffold(mapk,mek,raf) r104_koff
	Reaction105: MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) -> MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r105_kon
	Reaction106: MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) r106_koff
	Reaction107: MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) -> MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r107_kon
	Reaction108: MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) r108_koff
	Reaction109: MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold) + Scaffold(mapk,mek,raf) -> MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold!20).Scaffold(mapk,mek!20,raf) r109_kpon
	Reaction110: MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold!20).Scaffold(mapk,mek!20,raf) -> MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold) + Scaffold(mapk,mek,raf) r110_kpoff
	Reaction111: MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) -> MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r111_kpon
	Reaction112: MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) r112_kpoff
	Reaction113: MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) -> MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r113_kpon
	Reaction114: MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) r114_kpoff
	Reaction115: MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) + Scaffold(mapk,mek,raf) -> MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold!20).Scaffold(mapk,mek!20,raf) r115_kpon
	Reaction116: MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold!20).Scaffold(mapk,mek!20,raf) -> MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) + Scaffold(mapk,mek,raf) r116_kpoff
	Reaction117: MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) -> MEK(_p~_P,mapk,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r117_kpon
	Reaction118: MEK(_p~_P,mapk,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) r118_kpoff
	Reaction119: MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) -> MEK(_p~_P,mapk,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r119_kpon
	Reaction120: MEK(_p~_P,mapk,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) r120_kpoff
	Reaction121: MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold) + MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf) -> MEK(_p~0,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) r121_kon
	Reaction122: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold) + MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf) r122_koff
	Reaction123: MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r123_kon
	Reaction124: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) r124_koff
	Reaction125: MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r125_kon
	Reaction126: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) r126_koff
	Reaction127: MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold) + MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf) -> MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) r127_kpon
	Reaction128: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold) + MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf) r128_kpoff
	Reaction129: MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r129_kpon
	Reaction130: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) r130_kpoff
	Reaction131: MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r131_kpon
	Reaction132: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) r132_kpoff
	Reaction133: MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) + MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold!20).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) r133_kpon
	Reaction134: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold!20).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) + MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf) r134_kpoff
	Reaction135: MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r135_kpon
	Reaction136: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) r136_kpoff
	Reaction137: MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r137_kpon
	Reaction138: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) r138_kpoff
	Reaction139: MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold) + MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf) -> MEK(_p~0,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) r139_kon
	Reaction140: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold) + MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf) r140_koff
	Reaction141: MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r141_kon
	Reaction142: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) r142_koff
	Reaction143: MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r143_kon
	Reaction144: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) r144_koff
	Reaction145: MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold) + MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf) -> MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) r145_kpon
	Reaction146: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold) + MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf) r146_kpoff
	Reaction147: MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r147_kpon
	Reaction148: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) r148_kpoff
	Reaction149: MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r149_kpon
	Reaction150: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) r150_kpoff
	Reaction151: MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) + MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) r151_kpon
	Reaction152: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) + MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf) r152_kpoff
	Reaction153: MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r153_kpon
	Reaction154: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) r154_kpoff
	Reaction155: MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r155_kpon
	Reaction156: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) r156_kpoff
	Reaction157: MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold) + MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf) -> MEK(_p~0,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf) r157_kon
	Reaction158: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold) + MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf) r158_koff
	Reaction159: MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r159_kon
	Reaction160: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf!19) r160_koff
	Reaction161: MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r161_kon
	Reaction162: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf!19) r162_koff
	Reaction163: MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold) + MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf) -> MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf) r163_kpon
	Reaction164: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold) + MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf) r164_kpoff
	Reaction165: MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r165_kpon
	Reaction166: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf!19) r166_kpoff
	Reaction167: MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r167_kpon
	Reaction168: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf!19) r168_kpoff
	Reaction169: MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) + MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf) r169_kpon
	Reaction170: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) + MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf) r170_kpoff
	Reaction171: MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r171_kpon
	Reaction172: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf!19) r172_kpoff
	Reaction173: MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r173_kpon
	Reaction174: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf!19) r174_kpoff
	Reaction175: RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) + Scaffold(mapk,mek,raf) -> RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) r175_kon
	Reaction176: RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) -> RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) + Scaffold(mapk,mek,raf) r176_koff
	Reaction177: RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) + Scaffold(mapk,mek,raf) -> RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) r177_kpon
	Reaction178: RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) -> RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) + Scaffold(mapk,mek,raf) r178_kpoff
	Reaction179: RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold!20).Scaffold(mapk,mek!20,raf) -> MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r179_kon
	Reaction180: MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold!20).Scaffold(mapk,mek!20,raf) r180_koff
	Reaction181: RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold!20).Scaffold(mapk,mek!20,raf) -> MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r181_kpon
	Reaction182: MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~0,mapk,mekphosphatase,p~0,raf,scaffold!20).Scaffold(mapk,mek!20,raf) r182_kpoff
	Reaction183: RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold!20).Scaffold(mapk,mek!20,raf) -> MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r183_kon
	Reaction184: MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold!20).Scaffold(mapk,mek!20,raf) r184_koff
	Reaction185: RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold!20).Scaffold(mapk,mek!20,raf) -> MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r185_kpon
	Reaction186: MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~0,raf,scaffold!20).Scaffold(mapk,mek!20,raf) r186_kpoff
	Reaction187: RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold!20).Scaffold(mapk,mek!20,raf) -> MEK(_p~_P,mapk,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r187_kon
	Reaction188: MEK(_p~_P,mapk,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold!20).Scaffold(mapk,mek!20,raf) r188_koff
	Reaction189: RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold!20).Scaffold(mapk,mek!20,raf) -> MEK(_p~_P,mapk,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r189_kpon
	Reaction190: MEK(_p~_P,mapk,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf,scaffold!20).Scaffold(mapk,mek!20,raf) r190_kpoff
	Reaction191: RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) + MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf) -> RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) r191_kon
	Reaction192: RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) + MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf) r192_koff
	Reaction193: RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) + MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf) -> RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) r193_kpon
	Reaction194: RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) + MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf) r194_kpoff
	Reaction195: RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~0,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r195_kon
	Reaction196: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~0,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) r196_koff
	Reaction197: RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~0,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r197_kpon
	Reaction198: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~0,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) r198_kpoff
	Reaction199: RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r199_kon
	Reaction200: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) r200_koff
	Reaction201: RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r201_kpon
	Reaction202: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) r202_kpoff
	Reaction203: RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold!20).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r203_kon
	Reaction204: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold!20).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) r204_koff
	Reaction205: RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold!20).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r205_kpon
	Reaction206: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold!20).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) r206_kpoff
	Reaction207: RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) + MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf) -> RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) r207_kon
	Reaction208: RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) + MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf) r208_koff
	Reaction209: RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) + MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf) -> RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) r209_kpon
	Reaction210: RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) + MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf) r210_kpoff
	Reaction211: RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~0,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r211_kon
	Reaction212: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~0,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) r212_koff
	Reaction213: RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~0,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r213_kpon
	Reaction214: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~0,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) r214_kpoff
	Reaction215: RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r215_kon
	Reaction216: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) r216_koff
	Reaction217: RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r217_kpon
	Reaction218: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) r218_kpoff
	Reaction219: RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r219_kon
	Reaction220: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) r220_koff
	Reaction221: RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r221_kpon
	Reaction222: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) r222_kpoff
	Reaction223: RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) + MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf) -> RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf!19) r223_kon
	Reaction224: RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) + MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf) r224_koff
	Reaction225: RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) + MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf) -> RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf!19) r225_kpon
	Reaction226: RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) + MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf) r226_kpoff
	Reaction227: RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~0,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r227_kon
	Reaction228: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~0,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf) r228_koff
	Reaction229: RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~0,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r229_kpon
	Reaction230: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~0,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf) r230_kpoff
	Reaction231: RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r231_kon
	Reaction232: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf) r232_koff
	Reaction233: RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r233_kpon
	Reaction234: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf) r234_kpoff
	Reaction235: RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r235_kon
	Reaction236: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf) r236_koff
	Reaction237: RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r237_kpon
	Reaction238: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold) + MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf) r238_kpoff
	Reaction239: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold!20).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) r239_k7
	Reaction240: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r240_k7
	Reaction241: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r241_k7
	Reaction242: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf,scaffold!20).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf) r242_k9a
	Reaction243: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r243_k9a
	Reaction244: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r244_k9a
	Reaction245: MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r245_k3
	Reaction246: MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> MEK(_p~_P,mapk,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r246_k5a
	Reaction247: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r247_k3
	Reaction248: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r248_k5a
	Reaction249: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r249_k3
	Reaction250: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r250_k5a
	Reaction251: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r251_k3
	Reaction252: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r252_k5a
	Reaction253: RAFkinase(raf) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) -> RAF(_p~0,mek,rafkinase!18,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19).RAFkinase(raf!18) r253_k1a
	Reaction254: RAF(_p~0,mek,rafkinase!18,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19).RAFkinase(raf!18) -> RAFkinase(raf) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) r254_d1a
	Reaction255: RAF(_p~0,mek,rafkinase!18,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19).RAFkinase(raf!18) -> RAFkinase(raf) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek,raf!19) r255_k1
	Reaction256: RAFkinase(raf) + MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19).RAFkinase(raf!18) r256_k1a
	Reaction257: MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19).RAFkinase(raf!18) -> RAFkinase(raf) + MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r257_d1a
	Reaction258: MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19).RAFkinase(raf!18) -> RAFkinase(raf) + MEK(_p~0,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r258_k1
	Reaction259: RAFkinase(raf) + MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19).RAFkinase(raf!18) r259_k1a
	Reaction260: MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19).RAFkinase(raf!18) -> RAFkinase(raf) + MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r260_d1a
	Reaction261: MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19).RAFkinase(raf!18) -> RAFkinase(raf) + MEK(_p~_P,mapk,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r261_k1
	Reaction262: RAFkinase(raf) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) -> MEK(_p~_P,mapk,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19).RAFkinase(raf!18) r262_k1a
	Reaction263: MEK(_p~_P,mapk,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19).RAFkinase(raf!18) -> RAFkinase(raf) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r263_d1a
	Reaction264: MEK(_p~_P,mapk,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19).RAFkinase(raf!18) -> RAFkinase(raf) + MEK(_p~_P,mapk,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).Scaffold(mapk,mek!20,raf!19) r264_k1
	Reaction265: RAFkinase(raf) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> RAF(_p~0,mek,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19).RAFkinase(raf!18) r265_k1a
	Reaction266: RAF(_p~0,mek,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19).RAFkinase(raf!18) -> RAFkinase(raf) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) r266_d1a
	Reaction267: RAF(_p~0,mek,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19).RAFkinase(raf!18) -> RAFkinase(raf) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) r267_k1
	Reaction268: RAFkinase(raf) + MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) r268_k1a
	Reaction269: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) -> RAFkinase(raf) + MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r269_d1a
	Reaction270: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) -> RAFkinase(raf) + MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r270_k1
	Reaction271: RAFkinase(raf) + MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) r271_k1a
	Reaction272: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) -> RAFkinase(raf) + MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r272_d1a
	Reaction273: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) -> RAFkinase(raf) + MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r273_k1
	Reaction274: RAFkinase(raf) + MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) r274_k1a
	Reaction275: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) -> RAFkinase(raf) + MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r275_d1a
	Reaction276: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) -> RAFkinase(raf) + MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~0,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r276_k1
	Reaction277: RAFkinase(raf) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> RAF(_p~0,mek,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19).RAFkinase(raf!18) r277_k1a
	Reaction278: RAF(_p~0,mek,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19).RAFkinase(raf!18) -> RAFkinase(raf) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) r278_d1a
	Reaction279: RAF(_p~0,mek,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19).RAFkinase(raf!18) -> RAFkinase(raf) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~0,scaffold!21).Scaffold(mapk!21,mek,raf!19) r279_k1
	Reaction280: RAFkinase(raf) + MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) r280_k1a
	Reaction281: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) -> RAFkinase(raf) + MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r281_d1a
	Reaction282: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) -> RAFkinase(raf) + MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r282_k1
	Reaction283: RAFkinase(raf) + MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) r283_k1a
	Reaction284: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) -> RAFkinase(raf) + MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r284_d1a
	Reaction285: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) -> RAFkinase(raf) + MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r285_k1
	Reaction286: RAFkinase(raf) + MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) r286_k1a
	Reaction287: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) -> RAFkinase(raf) + MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r287_d1a
	Reaction288: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) -> RAFkinase(raf) + MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~0,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r288_k1
	Reaction289: RAFkinase(raf) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf!19) -> RAF(_p~0,mek,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf!19).RAFkinase(raf!18) r289_k1a
	Reaction290: RAF(_p~0,mek,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf!19).RAFkinase(raf!18) -> RAFkinase(raf) + RAF(_p~0,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf!19) r290_d1a
	Reaction291: RAF(_p~0,mek,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf!19).RAFkinase(raf!18) -> RAFkinase(raf) + RAF(_p~_P,mek,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek,p~P,scaffold!21).Scaffold(mapk!21,mek,raf!19) r291_k1
	Reaction292: RAFkinase(raf) + MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) r292_k1a
	Reaction293: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) -> RAFkinase(raf) + MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r293_d1a
	Reaction294: MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) -> RAFkinase(raf) + MEK(_p~0,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r294_k1
	Reaction295: RAFkinase(raf) + MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) r295_k1a
	Reaction296: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) -> RAFkinase(raf) + MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r296_d1a
	Reaction297: MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) -> RAFkinase(raf) + MEK(_p~_P,mapk!16,mekphosphatase,p~0,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r297_k1
	Reaction298: RAFkinase(raf) + MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) -> MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) r298_k1a
	Reaction299: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) -> RAFkinase(raf) + MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r299_d1a
	Reaction300: MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~0,mek!12,rafkinase!18,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19).RAFkinase(raf!18) -> RAFkinase(raf) + MEK(_p~_P,mapk!16,mekphosphatase,p~P,raf!12,scaffold!20).RAF(_p~_P,mek!12,rafkinase,rafphosphatase,scaffold!19).MAPK(_p~_P,mapkpase,mek!16,p~P,scaffold!21).Scaffold(mapk!21,mek!20,raf!19) r300_k1
end reaction rules
end model
