###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL6617035399', 'http://identifiers.org/biomodels.db/BIOMD0000000015']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/9664759']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_IS:['http://identifiers.org/kegg.pathway/hsa00230', 'http://identifiers.org/reactome/REACT_522']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0006144']
#@creatorEmail:'lenov@ebi.ac.uk'
#@creatorName:'Le Novère Nicolas'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 18 molecules and 37 reactions. The translated model has 17 molecules and 72 rules'
###
begin model
begin parameters
	phosphate 1400.0
	r1_aada 0.001062
	r1_fada4 0.970000
	r2_aade 0.010000
	r2_fade6 0.550000
	r3_aadna 3.278900
	r3_fdnap9 0.420000
	r3_fdnap10 0.330000
	r4_aadrnr 0.060200
	r4_fadrnr4 0.100000
	r4_fadrnr9 -0.300000
	r4_fadrnr10 0.870000
	r5_aampd 0.026880
	r5_fampd4 0.800000
	r5_fampd8 -0.030000
	r5_fampd18 -0.100000
	r6_aaprt 233.800000
	r6_faprt1 0.500000
	r6_faprt4 -0.800000
	r6_faprt6 0.750000
	r7_aarna 614.500000
	r7_frnap4 0.050000
	r7_frnap8 0.130000
	r8_aasuc 3.593200
	r8_fasuc2 0.400000
	r8_fasuc4 -0.240000
	r8_fasuc8 0.200000
	r8_fasuc18 -0.050000
	r9_aasli 66544.000000
	r9_fasli3 0.990000
	r9_fasli4 -0.950000
	r10_adada 0.033330
	r10_fdada9 1.000000
	r11_aden 5.272800
	r11_fden1 2.000000
	r11_fden2 -0.060000
	r11_fden4 -0.250000
	r11_fden8 -0.200000
	r11_fden18 -0.080000
	r12_adgnuc 0.033330
	r12_fdgnuc10 1.000000
	r13_adnaa 0.001938
	r13_fdnan12 1.000000
	r14_adnag 0.001318
	r14_fdnan12 1.000000
	r15_agdna 2.229600
	r15_fdnap9 0.420000
	r15_fdnap10 0.330000
	r16_agdrnr 0.119900
	r16_fgdrnr8 0.400000
	r16_fgdrnr9 -1.200000
	r16_fgdrnr10 -0.390000
	r17_agmpr 0.300500
	r17_fgmpr2 -0.150000
	r17_fgmpr4 -0.070000
	r17_fgmpr7 -0.760000
	r17_fgmpr8 0.700000
	r18_agmps 0.373800
	r18_fgmps4 0.120000
	r18_fgmps7 0.160000
	r19_agnuc 0.251100
	r19_fgnuc8 0.900000
	r19_fgnuc18 -0.340000
	r20_agprt 361.690000
	r20_fgprt1 1.200000
	r20_fgprt8 -1.200000
	r20_fgprt15 0.420000
	r21_agrna 409.600000
	r21_frnap4 0.050000
	r21_frnap8 0.130000
	r22_agua 0.491900
	r22_fgua15 0.500000
	r23_ahprt 12.569000
	r23_fhprt1 1.100000
	r23_fhprt2 -0.890000
	r23_fhprt13 0.480000
	r24_ahx 0.003793
	r24_fhx13 1.120000
	r25_ahxd 0.275400
	r25_fhxd13 0.650000
	r26_aimpd 1.282300
	r26_fimpd2 0.150000
	r26_fimpd7 -0.090000
	r26_fimpd8 -0.030000
	r27_ainuc 0.913500
	r27_finuc2 0.800000
	r27_finuc18 -0.360000
	r28_amat 7.206700
	r28_fmat4 0.200000
	r28_fmat5 -0.600000
	r29_apolyam 0.290000
	r29_fpolyam5 0.900000
	r30_aprpps 0.900000
	r30_fprpps1 -0.030000
	r30_fprpps4 -0.450000
	r30_fprpps8 -0.040000
	r30_fprpps17 0.650000
	r30_fprpps18 0.700000
	r31_apyr 1.295100
	r31_fpyr1 1.270000
	r32_arnaa 0.069230
	r32_frnan11 1.000000
	r33_arnag 0.046150
	r33_frnan11 1.000000
	r34_atrans 8.853900
	r34_ftrans5 0.330000
	r35_aua 0.000087
	r35_fua16 2.210000
	r36_ax 0.001200
	r36_fx14 2.000000
	r37_axd 0.949000
	r37_fxd14 0.550000
end parameters
begin molecule types
	#^ bqbiol:is chebi:CHEBI:17797, kegg.compound:C00117
	ribose_5_phosphate()
	#^ bqbiol:is chebi:CHEBI:16708, kegg.compound:C00147
	adenine()
	#^ bqbiol:is chebi:CHEBI:15414, kegg.compound:C00019
	s_adenosyl_L_methionine()
	#^ bqbiol:hasPart kegg.compound:C00035, kegg.compound:C00144, kegg.compound:C00044, chebi:CHEBI:17552, chebi:CHEBI:17345, chebi:CHEBI:17552, chebi:CHEBI:15996
	GTP_GDP_GMP()
	#^ bqbiol:hasPart kegg.compound:C00286, kegg.compound:C00362, kegg.compound:C00361, chebi:CHEBI:16497, chebi:CHEBI:28862, chebi:CHEBI:16192, chebi:CHEBI:16497
	dGTP_dGDP_dGMP()
	#^ bqbiol:is kegg.compound:C00046
	RNA()
	#^ bqbiol:is kegg.compound:C00039, chebi:CHEBI:16991
	DNA()
	#^ bqbiol:is chebi:CHEBI:15919, kegg.compound:C03794
	adenylosuccinate()
	#^ bqbiol:is chebi:CHEBI:17775, kegg.compound:C00366
	uricacid()
	#^ bqbiol:is chebi:CHEBI:17712, kegg.compound:C00385
	xanthine()
	#^ bqbiol:hasPart kegg.compound:C00262, kegg.compound:C05512, kegg.compound:C00294, chebi:CHEBI:17596, chebi:CHEBI:17368, chebi:CHEBI:28997
	dIno_Ino_HX()
	#^ bqbiol:is chebi:CHEBI:17111, kegg.compound:C00119
	phosphoribosylpyrophosphate()
	#^ bqbiol:is chebi:CHEBI:15652, kegg.compound:C00655
	xanthosinemonophosphate()
	#^ bqbiol:hasPart kegg.compound:C00131, kegg.compound:C00206, kegg.compound:C00360, kegg.compound:C00559, chebi:CHEBI:16284, chebi:CHEBI:16284, chebi:CHEBI:16174, chebi:CHEBI:17256, chebi:CHEBI:17713
	dATP_dADP_dAMP_dAdo()
	#^ bqbiol:is chebi:CHEBI:17202, kegg.compound:C00130
	inosinemonophosphate()
	#^ bqbiol:hasPart kegg.compound:C00242, kegg.compound:C00330, kegg.compound:C00387, chebi:CHEBI:16450, chebi:CHEBI:16235, chebi:CHEBI:17172
	guanine()
	#^ bqbiol:hasPart chebi:CHEBI:15422, chebi:CHEBI:16335, chebi:CHEBI:16027, chebi:CHEBI:16761, kegg.compound:C00008, kegg.compound:C00212, kegg.compound:C00020, kegg.compound:C00002, chebi:CHEBI:16761
	ATP_ADP_AMP_Ado()
end molecule types
begin seed species
	phosphoribosylpyrophosphate() 5.01742 #phosphoribosylpyrophosphate #PRPP
	inosinemonophosphate() 98.2634 #inosinemonophosphate #IMP
	adenylosuccinate() 0.198189 #adenylosuccinate #SAMP
	ATP_ADP_AMP_Ado() 2475.35 #ATP_ADP_AMP_Ado #ATP
	s_adenosyl_L_methionine() 3.99187 #s_adenosyl_L_methionine #SAM
	adenine() 0.98473 #adenine #Ade
	xanthosinemonophosphate() 24.793 #xanthosinemonophosphate #XMP
	GTP_GDP_GMP() 410.223 #GTP_GDP_GMP #GTP
	dATP_dADP_dAMP_dAdo() 6.01413 #dATP_dADP_dAMP_dAdo #dATP
	dGTP_dGDP_dGMP() 3.02581 #dGTP_dGDP_dGMP #dGTP
	RNA() 28680.5 #RNA #RNA
	DNA() 5179.34 #DNA #DNA
	dIno_Ino_HX() 9.51785 #dIno_Ino_HX #HX
	xanthine() 5.05941 #xanthine #Xa
	guanine() 5.50638 #guanine #Gua
	uricacid() 100.293 #uricacid #UA
	ribose_5_phosphate() 18.0 #ribose_5_phosphate #R5P
end seed species
begin observables
	Species phosphoribosylpyrophosphate phosphoribosylpyrophosphate() #phosphoribosylpyrophosphate
	Species inosinemonophosphate inosinemonophosphate() #inosine monophosphate
	Species adenylosuccinate adenylosuccinate() #adenylosuccinate
	Species ATP_ADP_AMP_Ado ATP_ADP_AMP_Ado() #ATP_ADP_AMP_Ado
	Species s_adenosyl_L_methionine s_adenosyl_L_methionine() #s-adenosyl-L-methionine
	Species adenine adenine() #adenine
	Species xanthosinemonophosphate xanthosinemonophosphate() #xanthosine monophosphate
	Species GTP_GDP_GMP GTP_GDP_GMP() #GTP_GDP_GMP
	Species dATP_dADP_dAMP_dAdo dATP_dADP_dAMP_dAdo() #dATP_dADP_dAMP_dAdo
	Species dGTP_dGDP_dGMP dGTP_dGDP_dGMP() #dGTP_dGDP_dGMP
	Species RNA RNA() #RNA
	Species DNA DNA() #DNA
	Species dIno_Ino_HX dIno_Ino_HX() #dIno_Ino_HX
	Species xanthine xanthine() #xanthine
	Species guanine guanine() #guanine
	Species uricacid uricacid() #uric acid
	Species ribose_5_phosphate ribose_5_phosphate() #ribose-5-phosphate
end observables
begin functions
	fRate0() = 0.001062*ATP_ADP_AMP_Ado^0.97
	fRate1() = 0.01*adenine^0.55
	fRate2() = 3.2789*dATP_dADP_dAMP_dAdo^0.42*dGTP_dGDP_dGMP^0.33
	fRate3() = 0.0602*ATP_ADP_AMP_Ado^0.1*dATP_dADP_dAMP_dAdo^(-0.3)*dGTP_dGDP_dGMP^0.87
	fRate4() = 0.02688*ATP_ADP_AMP_Ado^0.8*GTP_GDP_GMP^(-0.03)*phosphate^(-0.1)
	fRate5() = 233.8*ATP_ADP_AMP_Ado^(-0.8)*adenine^0.75*phosphoribosylpyrophosphate^0.5
	fRate6() = 614.5*ATP_ADP_AMP_Ado^0.05*GTP_GDP_GMP^0.13
	fRate7() = 3.5932*ATP_ADP_AMP_Ado^(-0.24)*GTP_GDP_GMP^0.2*inosinemonophosphate^0.4*phosphate^(-0.05)
	fRate8() = 66544.0*ATP_ADP_AMP_Ado^(-0.95)*adenylosuccinate^0.99
	fRate9() = 0.03333*dATP_dADP_dAMP_dAdo^1.0
	fRate10() = 5.2728*ATP_ADP_AMP_Ado^(-0.25)*GTP_GDP_GMP^(-0.2)*inosinemonophosphate^(-0.06)*phosphate^(-0.08)*phosphoribosylpyrophosphate^2.0
	fRate11() = 0.03333*dGTP_dGDP_dGMP^1.0
	fRate12() = 0.001938*DNA^1.0
	fRate13() = 0.001318*DNA^1.0
	fRate14() = 2.2296*dATP_dADP_dAMP_dAdo^0.42*dGTP_dGDP_dGMP^0.33
	fRate15() = 0.1199*GTP_GDP_GMP^0.4*dATP_dADP_dAMP_dAdo^(-1.2)*dGTP_dGDP_dGMP^(-0.39)
	fRate16() = 0.3005*ATP_ADP_AMP_Ado^(-0.07)*GTP_GDP_GMP^0.7*inosinemonophosphate^(-0.15)*xanthosinemonophosphate^(-0.76)
	fRate17() = 0.3738*ATP_ADP_AMP_Ado^0.12*xanthosinemonophosphate^0.16
	fRate18() = 0.2511*GTP_GDP_GMP^0.9*phosphate^(-0.34)
	fRate19() = 361.69*GTP_GDP_GMP^(-1.2)*guanine^0.42*phosphoribosylpyrophosphate^1.2
	fRate20() = 409.6*ATP_ADP_AMP_Ado^0.05*GTP_GDP_GMP^0.13
	fRate21() = 0.4919*guanine^0.5
	fRate22() = 12.569*dIno_Ino_HX^0.48*inosinemonophosphate^(-0.89)*phosphoribosylpyrophosphate^1.1
	fRate23() = 0.003793*dIno_Ino_HX^1.12
	fRate24() = 0.2754*dIno_Ino_HX^0.65
	fRate25() = 1.2823*GTP_GDP_GMP^(-0.03)*inosinemonophosphate^0.15*xanthosinemonophosphate^(-0.09)
	fRate26() = 0.9135*inosinemonophosphate^0.8*phosphate^(-0.36)
	fRate27() = 7.2067*ATP_ADP_AMP_Ado^0.2*s_adenosyl_L_methionine^(-0.6)
	fRate28() = 0.29*s_adenosyl_L_methionine^0.9
	fRate29() = 0.9*ATP_ADP_AMP_Ado^(-0.45)*GTP_GDP_GMP^(-0.04)*phosphate^0.7*phosphoribosylpyrophosphate^(-0.03)*ribose_5_phosphate^0.65
	fRate30() = 1.2951*phosphoribosylpyrophosphate^1.27
	fRate31() = 0.06923*RNA^1.0
	fRate32() = 0.04615*RNA^1.0
	fRate33() = 8.8539*s_adenosyl_L_methionine^0.33
	fRate34() = 8.744e-5*uricacid^2.21
	fRate35() = 0.0012*xanthine^2.0
	fRate36() = 0.949*xanthine^0.55
end functions
begin reaction rules
	ada_reactants_0: 0  -> ATP_ADP_AMP_Ado() -1*(fRate0())
	ada_products_0: 0  -> dIno_Ino_HX() fRate0()
	ade_reactants_0: 0  -> adenine() -1*(fRate1())
	adna_reactants_0: 0  -> dATP_dADP_dAMP_dAdo() -1*(fRate2()) #Modifiers(dGTP)
	adna_products_0: 0  -> DNA() fRate2() #Modifiers(dGTP)
	adrnr_reactants_0: 0  -> ATP_ADP_AMP_Ado() -1*(fRate3()) #Modifiers(dGTP, dATP)
	adrnr_products_0: 0  -> dATP_dADP_dAMP_dAdo() fRate3() #Modifiers(dGTP, dATP)
	ampd_reactants_0: 0  -> ATP_ADP_AMP_Ado() -1*(fRate4()) #Modifiers(GTP, Pi)
	ampd_products_0: 0  -> inosinemonophosphate() fRate4() #Modifiers(GTP, Pi)
	aprt_reactants_0: 0  -> phosphoribosylpyrophosphate() -1*(fRate5()) #Modifiers(ATP)
	aprt_reactants_1: 0  -> adenine() -1*(fRate5()) #Modifiers(ATP)
	aprt_products_0: 0  -> ATP_ADP_AMP_Ado() fRate5() #Modifiers(ATP)
	arna_reactants_0: 0  -> ATP_ADP_AMP_Ado() -1*(fRate6()) #Modifiers(GTP)
	arna_products_0: 0  -> RNA() fRate6() #Modifiers(GTP)
	asuc_reactants_0: 0  -> inosinemonophosphate() -1*(fRate7()) #Modifiers(ATP, GTP, Pi)
	asuc_products_0: 0  -> adenylosuccinate() fRate7() #Modifiers(ATP, GTP, Pi)
	asli_reactants_0: 0  -> adenylosuccinate() -1*(fRate8()) #Modifiers(ATP)
	asli_products_0: 0  -> ATP_ADP_AMP_Ado() fRate8() #Modifiers(ATP)
	dada_reactants_0: 0  -> dATP_dADP_dAMP_dAdo() -1*(fRate9())
	dada_products_0: 0  -> dIno_Ino_HX() fRate9()
	den_reactants_0: 0  -> phosphoribosylpyrophosphate() -1*(fRate10()) #Modifiers(dGTP, IMP, ATP, GTP, Pi)
	den_products_0: 0  -> inosinemonophosphate() fRate10() #Modifiers(dGTP, IMP, ATP, GTP, Pi)
	dgnuc_reactants_0: 0  -> dGTP_dGDP_dGMP() -1*(fRate11())
	dgnuc_products_0: 0  -> guanine() fRate11()
	dnaa_reactants_0: 0  -> DNA() -1*(fRate12())
	dnaa_products_0: 0  -> dATP_dADP_dAMP_dAdo() fRate12()
	dnag_reactants_0: 0  -> DNA() -1*(fRate13())
	dnag_products_0: 0  -> dGTP_dGDP_dGMP() fRate13()
	gdna_reactants_0: 0  -> dGTP_dGDP_dGMP() -1*(fRate14()) #Modifiers(dATP)
	gdna_products_0: 0  -> DNA() fRate14() #Modifiers(dATP)
	gdrnr_reactants_0: 0  -> GTP_GDP_GMP() -1*(fRate15()) #Modifiers(dATP, dGTP)
	gdrnr_products_0: 0  -> dGTP_dGDP_dGMP() fRate15() #Modifiers(dATP, dGTP)
	gmpr_reactants_0: 0  -> GTP_GDP_GMP() -1*(fRate16()) #Modifiers(XMP, ATP, IMP)
	gmpr_products_0: 0  -> inosinemonophosphate() fRate16() #Modifiers(XMP, ATP, IMP)
	gmps_reactants_0: 0  -> xanthosinemonophosphate() -1*(fRate17()) #Modifiers(ATP)
	gmps_products_0: 0  -> GTP_GDP_GMP() fRate17() #Modifiers(ATP)
	gnuc_reactants_0: 0  -> GTP_GDP_GMP() -1*(fRate18()) #Modifiers(Pi)
	gnuc_products_0: 0  -> guanine() fRate18() #Modifiers(Pi)
	gprt_reactants_0: 0  -> guanine() -1*(fRate19()) #Modifiers(GTP)
	gprt_reactants_1: 0  -> phosphoribosylpyrophosphate() -1*(fRate19()) #Modifiers(GTP)
	gprt_products_0: 0  -> GTP_GDP_GMP() fRate19() #Modifiers(GTP)
	grna_reactants_0: 0  -> GTP_GDP_GMP() -1*(fRate20()) #Modifiers(ATP)
	grna_products_0: 0  -> RNA() fRate20() #Modifiers(ATP)
	gua_reactants_0: 0  -> guanine() -1*(fRate21())
	gua_products_0: 0  -> xanthine() fRate21()
	hprt_reactants_0: 0  -> dIno_Ino_HX() -1*(fRate22()) #Modifiers(IMP)
	hprt_reactants_1: 0  -> phosphoribosylpyrophosphate() -1*(fRate22()) #Modifiers(IMP)
	hprt_products_0: 0  -> inosinemonophosphate() fRate22() #Modifiers(IMP)
	hx_reactants_0: 0  -> dIno_Ino_HX() -1*(fRate23())
	hxd_reactants_0: 0  -> dIno_Ino_HX() -1*(fRate24())
	hxd_products_0: 0  -> xanthine() fRate24()
	impd_reactants_0: 0  -> inosinemonophosphate() -1*(fRate25()) #Modifiers(GTP, XMP)
	impd_products_0: 0  -> xanthosinemonophosphate() fRate25() #Modifiers(GTP, XMP)
	inuc_reactants_0: 0  -> inosinemonophosphate() -1*(fRate26()) #Modifiers(Pi)
	inuc_products_0: 0  -> dIno_Ino_HX() fRate26() #Modifiers(Pi)
	mat_reactants_0: 0  -> ATP_ADP_AMP_Ado() -1*(fRate27()) #Modifiers(SAM)
	mat_products_0: 0  -> s_adenosyl_L_methionine() fRate27() #Modifiers(SAM)
	polyam_reactants_0: 0  -> s_adenosyl_L_methionine() -1*(fRate28())
	polyam_products_0: 0  -> adenine() fRate28()
	prpps_reactants_0: 0  -> ribose_5_phosphate() -1*(fRate29()) #Modifiers(ATP, GTP, Pi, PRPP)
	prpps_products_0: 0  -> phosphoribosylpyrophosphate() fRate29() #Modifiers(ATP, GTP, Pi, PRPP)
	pyr_reactants_0: 0  -> phosphoribosylpyrophosphate() -1*(fRate30())
	rnaa_reactants_0: 0  -> RNA() -1*(fRate31())
	rnaa_products_0: 0  -> ATP_ADP_AMP_Ado() fRate31()
	rnag_reactants_0: 0  -> RNA() -1*(fRate32())
	rnag_products_0: 0  -> GTP_GDP_GMP() fRate32()
	trans_reactants_0: 0  -> s_adenosyl_L_methionine() -1*(fRate33())
	trans_products_0: 0  -> ATP_ADP_AMP_Ado() fRate33()
	ua_reactants_0: 0  -> uricacid() -1*(fRate34())
	x_reactants_0: 0  -> xanthine() -1*(fRate35())
	xd_reactants_0: 0  -> xanthine() -1*(fRate36())
	xd_products_0: 0  -> uricacid() fRate36()
end reaction rules
end model
