###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL6618496308', 'http://identifiers.org/biomodels.db/BIOMD0000000027']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/14744999']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0000165']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/8355']
#@creatorEmail:'lenov@ebi.ac.uk'
#@creatorName:'Le Novère Nicolas'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 5 molecules and 4 reactions. The translated model has 1 molecules and 4 rules'
###
begin model
begin parameters
	k1cat 0.01
	Km1 50.0
	k2cat 15.0
	Km2 500.0
	k3cat 0.084
	Km3 22.0
	k4cat 0.06
	Km4 18.0
	Km5 78.0
	MAPKK 50.0
	MKP3 100.0
end parameters
begin molecule types
	#^ bqbiol:isVersionOf uniprot:P26696
	M(p~P~0,p2~P~0)
end molecule types
begin seed species
	M(p~0,p2~0) 500.0 #M #M
end seed species
begin observables
	Species M M(p~0,p2~0) #M
	Species Mp M(p~P,p2~0) #Mp
	Species Mpp M(p~P,p2~P) #Mpp
end observables
begin functions
	fRate0() = Km2*MAPKK*k1cat/(Km1*Mp + Km2*(Km1 + M))
	fRate1() = Km1*MAPKK*k2cat/(Km1*(Km2 + Mp) + Km2*M)
	fRate2() = Km4*Km5*MKP3*k3cat/(Km3*Km4*M + Km3*Km5*Mp + Km4*Km5*(Km3 + Mpp))
	fRate3() = Km3*Km5*MKP3*k4cat/(Km3*Km4*M + Km3*Km5*(Km4 + Mp) + Km4*Km5*Mpp)
end functions
begin reaction rules
	v1: M(p~0,p2~0) -> M(p~P,p2~0) fRate0() #Modifiers(MAPKK)
	v2: M(p~P,p2~0) -> M(p~P,p2~P) fRate1() #Modifiers(MAPKK, M)
	v3: M(p~P,p2~P) -> M(p~P,p2~0) fRate2() #Modifiers(MKP3, M)
	v4: M(p~P,p2~0) -> M(p~0,p2~0) fRate3() #Modifiers(MKP3, Mpp)
end reaction rules
end model
