###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL6624243033', 'http://identifiers.org/biomodels.db/BIOMD0000000049']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/15793571']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/biomodels.db/MODEL9071122126', 'http://identifiers.org/pubmed/14751248', 'http://identifiers.org/pubmed/11832340', 'http://identifiers.org/pubmed/11024454', 'http://identifiers.org/biomodels.db/MODEL9070467164', 'http://identifiers.org/biomodels.db/BIOMD0000000019', 'http://identifiers.org/biomodels.db/BIOMD0000000146', 'http://identifiers.org/biomodels.db/MODEL9079179924']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/10114']
#@BQB_HAS_PART:['http://identifiers.org/go/GO:0048011', 'http://identifiers.org/go/GO:0000165', 'http://identifiers.org/go/GO:0007173', 'http://identifiers.org/go/GO:0007265']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0070371']
#@creatorEmail:'luli@ebi.ac.uk'
#@creatorName:'Li Lu'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 99 molecules and 150 reactions. The translated model has 39 molecules and 154 rules'
###
begin model
begin parameters
	PP2A_c1 1.44528e+17 #original 0.24microMole/L
	PP2A 1.44528e+17 #original 0.24microMole/L
	Rap1GAP_c1 7226400000000000.0 #original 0.012microMole/L
	Rap1GAP 7226400000000000.0 #original 0.012microMole/L
	r1_re1_k1 0.000100
	r1_re1_k2 0.000100
	r2_re2_k1 2.283300
	r2_re2_k2 0.002967
	r3_re8_k1 10.000000
	r3_re8_k2 0.020000
	r4_J3_k1 0.030000
	r4_J3_k2 0.016800
	r5_J4_k1 0.030000
	r5_J4_k2 0.016800
	r6_J5_k1 4.000000
	r6_J5_k2 0.001000
	r7_J6_k1 0.500000
	r7_J6_k2 0.200000
	r8_J7_k1 10.000000
	r8_J7_k2 0.200000
	r9_J8_k1 0.002000
	r9_J8_k2 0.000010
	r10_J9_k1 0.500000
	r10_J9_k2 0.200000
	r11_J10_k 0.002000
	r12_J11_k 0.002000
	r13_J12_k1 10.000000
	r13_J12_k2 0.200000
	r14_J13_k 1.000000
	r15_J14_k 0.050000
	r16_J15_k 0.001000
	r17_J16_k1 0.500000
	r17_J16_k2 0.200000
	r18_J17_k 0.050000
	r19_J18_k 0.001000
	r20_J19_k 0.050000
	r21_J20_k 0.001000
	r22_J21_k 1.000000
	r23_J22_k1 10.000000
	r23_J22_k2 0.200000
	r24_J23_k1 10.000000
	r24_J23_k2 0.200000
	r25_J24_k1 10.000000
	r25_J24_k2 0.200000
	r26_J25_k1 0.500000
	r26_J25_k2 0.200000
	r27_J27_k1 10.000000
	r27_J27_k2 0.200000
	r28_J28_k 0.050000
	r29_J29_k 0.001000
	r30_J30_k 0.005000
	r31_J31_Vmax 0.200000
	r31_J31_Km1 0.100000
	r32_J32_k 0.005000
	r33_J33_k 0.005000
	r34_J34_k1 1.000000
	r34_J34_k2 0.002000
	r35_J35_k1 1.000000
	r35_J35_k2 0.200000
	r36_J36_k1 1.000000
	r36_J36_k2 0.200000
	r37_J37_k 1.000000
	r38_J38_k1 1.000000
	r38_J38_k2 0.200000
	r39_J39_k1 0.500000
	r39_J39_k2 0.200000
	r40_J40_k1 0.500000
	r40_J40_k2 0.200000
	r41_J41_k 0.050000
	r42_J42_k 0.050000
	r43_J43_k 1.000000
	r44_J44_k1 1.000000
	r44_J44_k2 0.200000
	r45_J45_k 0.050000
	r46_J46_k 0.001000
	r47_J47_k 0.001000
	r48_J49_k1 0.120000
	r48_J49_k2 0.010000
	r49_J50_Vmax 1.000000
	r49_J50_Km1 25.641000
	r50_J51_Vmax 1.000000
	r50_J51_Km1 25.641000
	r51_J52_k1 60.000000
	r51_J52_k2 0.500000
	r52_J53_k1 60.000000
	r52_J53_k2 0.500000
	r53_J54_k1 60.000000
	r53_J54_k2 0.500000
	r54_J57_Vmax 3.000000
	r54_J57_Km1 15.657000
	r55_J58_Vmax 3.000000
	r55_J58_Km1 15.657000
	r56_J61_Vmax 3.000000
	r56_J61_Km1 15.657000
	r57_J62_Vmax 3.000000
	r57_J62_Km1 15.657000
	r58_J63_k1 10.000000
	r58_J63_k2 0.075000
	r59_J66_k 0.000167
	r60_J67_k 0.000117
	r61_J68_Vmax 0.024000
	r61_J68_Km1 0.010000
	r62_J69_Vmax 2.000000
	r62_J69_Km1 0.020000
	r63_J70_k1 6.200000
	r63_J70_k2 0.000064
	r64_J71_k 1.000000
	r65_J72_k 0.000630
	r66_J73_k 0.000420
	r67_J74_k 0.002200
	r68_J75_k1 10.000000
	r68_J75_k2 0.200000
	r69_J76_k1 10.000000
	r69_J76_k2 0.200000
	r70_J77_k1 5.000000
	r70_J77_k2 0.100000
	r71_J78_k1 5.000000
	r71_J78_k2 0.100000
	r72_J79_k1 10.000000
	r72_J79_k2 0.200000
	r73_J80_k1 10.000000
	r73_J80_k2 0.200000
	r74_J81_k 0.100000
	r75_J82_k 0.100000
	r76_J83_k 2.000000
	r77_J84_k1 5.000000
	r77_J84_k2 0.100000
	r78_J85_k1 5.000000
	r78_J85_k2 0.100000
	r79_J86_k 2.000000
	r80_J87_k 0.002200
	r81_J88_k 0.002200
	r82_J89_k 0.002200
	r83_J90_k 0.002200
	r84_J92_k 0.000420
	r85_J93_k 0.000420
	r86_J94_k 0.000420
	r87_J95_k1 10.000000
	r87_J95_k2 0.200000
	r88_J96_k1 10.000000
	r88_J96_k2 0.200000
	r89_J97_k 0.000630
	r90_J98_k 0.000630
	r91_J99_k 0.000630
	r92_J100_k 0.000630
	r93_J101_k 0.000630
	r94_J102_k 0.000630
	r95_J103_k1 1.000000
	r95_J103_k2 0.200000
	r96_J104_k1 1.000000
	r96_J104_k2 0.200000
	r97_J105_k1 10.000000
	r97_J105_k2 0.200000
	r98_J106_k1 10.000000
	r98_J106_k2 0.200000
	r99_J107_k 0.002200
	r100_J108_k 0.000420
	r101_J109_k 0.002200
	r102_J110_k 0.000420
	r103_J112_k 0.000420
	r104_J113_k1 0.000833
	r104_J113_k2 0.000278
	r105_J115_k1 10.000000
	r105_J115_k2 0.200000
	r106_J116_k1 10.000000
	r106_J116_k2 0.200000
	r107_J117_k1 10.000000
	r107_J117_k2 0.200000
	r108_J119_k1 0.500000
	r108_J119_k2 0.200000
	r109_J118_k1 1.000000
	r109_J118_k2 0.200000
	r110_J120_k1 1.000000
	r110_J120_k2 0.200000
	r111_J121_Vmax 10.000000
	r111_J121_Km1 1.000000
	r112_J122_Vmax 2.000000
	r112_J122_Km1 1.000000
	r113_J123_Vmax 0.020000
	r113_J123_Km1 0.100000
	r114_J124_Vmax 1.000000
	r114_J124_Km1 25.641000
	r115_J133_k1 16.304000
	r115_J133_k2 0.600000
	r116_J134_k1 16.304000
	r116_J134_k2 0.600000
	r117_J135_k1 16.304000
	r117_J135_k2 0.600000
	r118_J136_k 0.150000
	r119_J137_Vmax 10.000000
	r119_J137_Km1 1.000000
	r120_J138_Vmax 10.000000
	r120_J138_Km1 1.000000
	r121_J139_Vmax 2.000000
	r121_J139_Km1 1.000000
	r122_J140_k1 15.625000
	r122_J140_k2 2.000000
	r123_J141_k1 15.625000
	r123_J141_k2 2.000000
	r124_J142_k1 15.625000
	r124_J142_k2 2.000000
	r125_J143_k1 15.625000
	r125_J143_k2 2.000000
	r126_J144_k1 6.250000
	r126_J144_k2 0.800000
	r127_J145_k1 6.250000
	r127_J145_k2 0.800000
	r128_J146_k1 6.250000
	r128_J146_k2 0.800000
	r129_J147_k1 6.250000
	r129_J147_k2 0.800000
	r130_J148_k1 9.375000
	r130_J148_k2 1.200000
	r131_J149_k1 9.375000
	r131_J149_k2 1.200000
	r132_J150_k1 9.375000
	r132_J150_k2 1.200000
	r133_J151_k1 9.375000
	r133_J151_k2 1.200000
	r134_J152_k 0.500000
	r135_J153_k 0.500000
	r136_J154_k 0.500000
	r137_J155_k 0.500000
	r138_J156_k 0.200000
	r139_J157_k 0.200000
	r140_J158_k 0.200000
	r141_J159_k 0.200000
	r142_J160_k 0.300000
	r143_J161_k 0.300000
	r144_J162_k 0.300000
	r145_J163_k 0.300000
	r146_J164_k 0.001000
	r147_J165_k1 15.000000
	r147_J165_k2 0.240000
	r148_J166_k1 15.000000
	r148_J166_k2 0.240000
	r149_J167_k 0.060000
	r150_J168_k 0.060000
end parameters
begin compartments
	#volume units: L
	compartment 3 1.0
	c1 3 1.0
end compartments
begin molecule types
	#^ bqbiol:is interpro:IPR003577
	Ras_GTP(Ras_GDP~Ras_GDP~0,b_raf,c_raf,mek)
	Rap1(_gdp~_GDP~0,_gtp~_GTP~0,b_raf)
	#^ bqbiol:isVersionOf uniprot:Q5M824
	Shc(l_dpegfr,p~P~0,ptrka)
	#^ bqbiol:is uniprot:Q99MC6
	B_Raf(mek,rap1,ras_gtp)
	#^ bqbiol:hasPart uniprot:Q9Z1I1, uniprot:P35739, uniprot:Q5M824, uniprot:P62994
	Grb2_SOS_pShc_pTrkA_endo()
	#^ bqbiol:isVersionOf go:GO:0000502
	proteasome(c_cbl)
	#^ bqbiol:is uniprot:P35739
	NGFR(ngf,pro_TrkA~pro_TrkA~0)
	#^ bqbiol:hasPart uniprot:P35739, uniprot:Q9QYV3, uniprot:Q63768, uniprot:D4A244
	Crk_C3G_pFRS2_pTrkA_endo()
	#^ bqbiol:is uniprot:P63086
	ERK(erk,mek,mkp3,pp~PP~0)
	#^ bqbiol:isHomologTo uniprot:Q8K4S7
	c_Cbl(l_dpegfr,proteasome)
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:D4A244, uniprot:Q8K4S7
	FRS2_dpEGFR_c_Cbl_ubiq()
	#^ bqbiol:is uniprot:P25427
	NGF(ngfr)
	#^ bqbiol:is uniprot:P07522
	EGF(egfr)
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:Q9QYV3, uniprot:Q63768, uniprot:D4A244
	Crk_C3G_pFRS2_dpEGFR()
	#^ bqbiol:is interpro:IPR011575
	RasGAP(dok)
	#^ bqbiol:isVersionOf uniprot:D4A244
	FRS2(l_dpegfr,p~P~0,ptrka)
	#^ bqbiol:is uniprot:Q64346
	MKP3(erk)
	#^ bqbiol:isVersionOf uniprot:Q4QQV2, interpro:IPR002404
	Dok(p~P~0,rasgap)
	#^ bqbiol:is uniprot:Q9QYV3
	C3G(crk)
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522
	L_dpEGFR(c_cbl,frs2,p~P~0,shc)
	#^ bqbiol:is uniprot:Q63768
	Crk(c3g)
	#^ bqbiol:hasPart uniprot:D4A244, uniprot:Q8K4S7, uniprot:Q9QX70
	pFRS2_dpEGFR_c_Cbl_ubiq()
	#^ bqbiol:isVersionOf uniprot:Q9Z1I1
	SOS(grb2,p~P~0)
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:Q5M824, uniprot:Q8K4S7
	pShc_dpEGFR_c_Cbl_ubiq()
	#^ bqbiol:isPartOf uniprot:Q9QX70
	EGFR(egf,pro_~PRO_~0)
	#^ bqbiol:hasPart uniprot:Q8K4S7, uniprot:Q9QX70, uniprot:Q5M824
	Shc_dpEGFR_c_Cbl_ubiq()
	#^ bqbiol:hasPart uniprot:P62994, uniprot:Q5M824, uniprot:Q9Z1I1
	Grb2_SOS_pShc()
	#^ bqbiol:hasVersion uniprot:Q01986
	MEK(b_raf,erk,p~P~0,p2~P~0,ras_gtp)
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:Q9Z1I1, uniprot:Q5M824, uniprot:P62994
	Grb2_SOS_pShc_dpEGFR()
	#^ bqbiol:hasPart uniprot:Q5M824, uniprot:Q9Z1I1, uniprot:P62994, uniprot:P35739
	Grb2_SOS_pShc_pTrkA()
	#^ bqbiol:isVersionOf uniprot:P35739
	pTrkA(_endo~_ENDO~0,degradation~degradation~0,frs2,shc)
	#^ bqbiol:hasPart uniprot:Q8K4S7, uniprot:Q9QX70, uniprot:Q5M824, uniprot:P62994, uniprot:Q9Z1I1
	Grb2_SOS_pShc_dpEGFR_c_Cbl()
	#^ bqbiol:is uniprot:P11345
	c_Raf(ras_gtp)
	#^ bqbiol:hasPart uniprot:P35739, uniprot:Q9QYV3, uniprot:Q63768, uniprot:D4A244
	Crk_C3G_pFRS2_pTrkA()
	#^ bqbiol:is uniprot:P62994
	Grb2(sos)
	#^ bqbiol:hasPart uniprot:Q8K4S7, uniprot:Q9QX70, uniprot:Q5M824, uniprot:P62994, uniprot:Q9Z1I1
	Grb2_SOS_pShc_dpEGFR_c_Cbl_ubiq()
	#^ bqbiol:hasPart uniprot:P07522, uniprot:Q9QX70
	L_EGFR_dimer()
	#^ bqbiol:hasPart uniprot:Q9QYV3, uniprot:Q9QX70, uniprot:Q63768, uniprot:D4A244, uniprot:Q8K4S7
	Crk_C3G_pFRS2_dpEGFR_c_Cbl()
	#^ bqbiol:hasPart uniprot:D4A244, uniprot:Q9QX70, uniprot:Q9QYV3, uniprot:Q63768, uniprot:Q8K4S7
	Crk_C3G_pFRS2_dpEGFR_c_Cbl_ubiq()
end molecule types
begin seed species
	@compartment:EGFR(egf,pro_~0)@compartment 1.8066e+17 # (0.3 * 1e-06)mol/L * 6.022e23/mol *1.0L #EGFR #EGFR
	@c1:SOS(grb2,p~0)@c1 6.022e+16 #original 0.1microMole/L  #SOS #SOS
	@c1:Grb2(sos)@c1 6.022e+17 #original 1.0microMole/L  #Grb2 #Grb2
	@c1:Dok(p~0,rasgap)@c1 1.8066e+17 #original 0.3microMole/L  #Dok #Dok
	@c1:Crk(c3g)@c1 6.022e+17 #original 1.0microMole/L  #Crk #Crk
	@c1:FRS2(l_dpegfr,p~0,ptrka)@c1 6.022e+17 #original 1.0microMole/L  #FRS2 #FRS2
	@c1:Shc(l_dpegfr,p~0,ptrka)@c1 6.022e+17 #original 1.0microMole/L  #Shc #Shc
	@c1:Rap1(_gdp~_GDP,_gtp~0,b_raf)@c1 1.2044e+17 #original 0.2microMole/L  #Rap1_GDP #Rap1_GDP
	@c1:MEK(b_raf,erk,p~0,p2~0,ras_gtp)@c1 4.0949600000000006e+17 #original 0.68microMole/L  #MEK #MEK
	@c1:MKP3(erk)@c1 1.08396e+16 #original 0.018microMole/L  #MKP3 #MKP3
	@c1:c_Cbl(l_dpegfr,proteasome)@c1 3.011e+17 #original 0.5microMole/L  #c_Cbl #c_Cbl
	@c1:RasGAP(dok)@c1 6.022e+16 #original 0.1microMole/L  #RasGAP #RasGAP
	@c1:c_Raf(ras_gtp)@c1 3.011e+17 #original 0.5microMole/L  #c_Raf #c_Raf
	@c1:B_Raf(mek,rap1,ras_gtp)@c1 1.2044e+17 #original 0.2microMole/L  #B_Raf #B_Raf
	@c1:ERK(erk,mek,mkp3,pp~0)@c1 1.56572e+17 #original 0.26microMole/L  #ERK #ERK
	@c1:Ras_GTP(Ras_GDP~Ras_GDP,b_raf,c_raf,mek)@c1 6.022e+16 #original 0.1microMole/L  #Ras_GDP #Ras_GDP
	@c1:C3G(crk)@c1 3.011e+17 #original 0.5microMole/L  #C3G #C3G
	@compartment:NGFR(ngf,pro_TrkA~0)@compartment 3.72725668e+16 #original 0.061894microMole/L  #NGFR #NGFR
	@c1:NGFR(ngf,pro_TrkA~pro_TrkA)@c1 1.24239882e+16 #original 0.020631microMole/L  #pro_TrkA #pro_TrkA
	@compartment:EGF(egfr)@compartment 971348600000000.0 #original 0.001613microMole/L  #EGF #EGF
	@c1:EGFR(egf,pro_~PRO_)@c1 1.8066e+17 #original 0.3microMole/L  #pro_EGFR #pro_EGFR
end seed species
begin observables
	Species EGFR_compartment @compartment:EGFR(egf,pro_~0)@compartment #EGFR
	Species L_EGFR_compartment @compartment:EGFR(egf!24,pro_~0)@compartment.EGF(egfr!24)@compartment #L_EGFR
	Species L_EGFR_dimer_compartment @compartment:L_EGFR_dimer()@compartment #L_EGFR_dimer
	Species SOS_c1 @c1:SOS(grb2,p~0)@c1 #SOS
	Species L_dpEGFR_compartment @compartment:L_dpEGFR(c_cbl,frs2,p~0,shc)@compartment #L_dpEGFR
	Species pSOS_c1 @c1:SOS(grb2,p~P)@c1 #pSOS
	Species SOS_Grb2_c1 @c1:SOS(grb2!64,p~0)@c1.Grb2(sos!64)@c1 #SOS_Grb2
	Species Grb2_c1 @c1:Grb2(sos)@c1 #Grb2
	Species Dok_c1 @c1:Dok(p~0,rasgap)@c1 #Dok
	Species pDok_c1 @c1:Dok(p~P,rasgap)@c1 #pDok
	Species Crk_c1 @c1:Crk(c3g)@c1 #Crk
	Species FRS2_c1 @c1:FRS2(l_dpegfr,p~0,ptrka)@c1 #FRS2
	Species Shc_c1 @c1:Shc(l_dpegfr,p~0,ptrka)@c1 #Shc
	Species pSOS_Grb2_c1 @c1:SOS(grb2!64,p~P)@c1.Grb2(sos!64)@c1 #pSOS_Grb2
	Species Rap1_GDP_c1 @c1:Rap1(_gdp~_GDP,_gtp~0,b_raf)@c1 #Rap1_GDP
	Species MEK_c1 @c1:MEK(b_raf,erk,p~0,p2~0,ras_gtp)@c1 #MEK
	Species MKP3_c1 @c1:MKP3(erk)@c1 #MKP3
	Species pShc_dpEGFR_c1 @c1:L_dpEGFR(c_cbl,frs2,p~P,shc!71)@c1.Shc(l_dpegfr!71,p~0,ptrka)@c1 #pShc_dpEGFR
	Species dpEGFR_c_Cbl_c1 @c1:L_dpEGFR(c_cbl!74,frs2,p~0,shc)@c1.c_Cbl(l_dpegfr!74,proteasome)@c1 #dpEGFR_c_Cbl
	Species B_Raf_Rap1_GTP_c1 @c1:Rap1(_gdp~0,_gtp~_GTP,b_raf!79)@c1.B_Raf(mek,rap1!79,ras_gtp)@c1 #B_Raf_Rap1_GTP
	Species pShc_dpEGFR_c_Cbl_c1 @c1:L_dpEGFR(c_cbl!74,frs2,p~P,shc!71)@c1.Shc(l_dpegfr!71,p~0,ptrka)@c1.c_Cbl(l_dpegfr!74,proteasome)@c1 #pShc_dpEGFR_c_Cbl
	Species pFRS2_dpEGFR_c_Cbl_c1 @c1:L_dpEGFR(c_cbl!74,frs2!73,p~P,shc)@c1.FRS2(l_dpegfr!73,p~0,ptrka)@c1.c_Cbl(l_dpegfr!74,proteasome)@c1 #pFRS2_dpEGFR_c_Cbl
	Species Shc_dpEGFR_c1 @c1:L_dpEGFR(c_cbl,frs2,p~0,shc!71)@c1.Shc(l_dpegfr!71,p~0,ptrka)@c1 #Shc_dpEGFR
	Species c_Cbl_c1 @c1:c_Cbl(l_dpegfr,proteasome)@c1 #c_Cbl
	Species RasGAP_c1 @c1:RasGAP(dok)@c1 #RasGAP
	Species c_Raf_c1 @c1:c_Raf(ras_gtp)@c1 #c_Raf
	Species B_Raf_c1 @c1:B_Raf(mek,rap1,ras_gtp)@c1 #B_Raf
	Species ERK_c1 @c1:ERK(erk,mek,mkp3,pp~0)@c1 #ERK
	Species Ras_GDP_c1 @c1:Ras_GTP(Ras_GDP~Ras_GDP,b_raf,c_raf,mek)@c1 #Ras_GDP
	Species C3G_c1 @c1:C3G(crk)@c1 #C3G
	Species NGFR_compartment @compartment:NGFR(ngf,pro_TrkA~0)@compartment #NGFR
	Species pShc_c1 @c1:Shc(l_dpegfr,p~P,ptrka)@c1 #pShc
	Species pFRS2_dpEGFR_c1 @c1:L_dpEGFR(c_cbl,frs2!73,p~P,shc)@c1.FRS2(l_dpegfr!73,p~0,ptrka)@c1 #pFRS2_dpEGFR
	Species pTrkA_endo_c1 @c1:pTrkA(_endo~_ENDO,degradation~0,frs2,shc)@c1 #pTrkA_endo
	Species MEK_ERK_c1 @c1:MEK(b_raf,erk!32,p~0,p2~0,ras_gtp)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1 #MEK_ERK
	Species pMEK_ERK_c1 @c1:MEK(b_raf,erk!32,p~P,p2~0,ras_gtp)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1 #pMEK_ERK
	Species FRS2_dpEGFR_c_Cbl_ubiq_c1 @c1:FRS2_dpEGFR_c_Cbl_ubiq()@c1 #FRS2_dpEGFR_c_Cbl_ubiq
	Species Crk_C3G_pFRS2_dpEGFR_c_Cbl_c1 @c1:Crk_C3G_pFRS2_dpEGFR_c_Cbl()@c1 #Crk_C3G_pFRS2_dpEGFR_c_Cbl
	Species pShc_dpEGFR_c_Cbl_ubiq_c1 @c1:pShc_dpEGFR_c_Cbl_ubiq()@c1 #pShc_dpEGFR_c_Cbl_ubiq
	Species Crk_C3G_pFRS2_dpEGFR_c1 @c1:Crk_C3G_pFRS2_dpEGFR()@c1 #Crk_C3G_pFRS2_dpEGFR
	Species Grb2_SOS_pShc_dpEGFR_c_Cbl_ubiq_c1 @c1:Grb2_SOS_pShc_dpEGFR_c_Cbl_ubiq()@c1 #Grb2_SOS_pShc_dpEGFR_c_Cbl_ubiq
	Species Grb2_SOS_pShc_dpEGFR_c_Cbl_c1 @c1:Grb2_SOS_pShc_dpEGFR_c_Cbl()@c1 #Grb2_SOS_pShc_dpEGFR_c_Cbl
	Species Shc_dpEGFR_c_Cbl_ubiq_c1 @c1:Shc_dpEGFR_c_Cbl_ubiq()@c1 #Shc_dpEGFR_c_Cbl_ubiq
	Species dpEGFR_c_Cbl_ubiq_c1 @c1:c_Cbl(l_dpegfr,proteasome!77)@c1.proteasome(c_cbl!77)@c1 #dpEGFR_c_Cbl_ubiq
	Species proteasome_c1 @c1:proteasome(c_cbl)@c1 #proteasome
	Species Grb2_SOS_pShc_c1 @c1:Grb2_SOS_pShc()@c1 #Grb2_SOS_pShc
	Species Shc_dpEGFR_c_Cbl_c1 @c1:L_dpEGFR(c_cbl!74,frs2,p~0,shc!71)@c1.Shc(l_dpegfr!71,p~0,ptrka)@c1.c_Cbl(l_dpegfr!74,proteasome)@c1 #Shc_dpEGFR_c_Cbl
	Species Grb2_SOS_pShc_dpEGFR_c1 @c1:Grb2_SOS_pShc_dpEGFR()@c1 #Grb2_SOS_pShc_dpEGFR
	Species pFRS2_c1 @c1:FRS2(l_dpegfr,p~P,ptrka)@c1 #pFRS2
	Species FRS2_dpEGFR_c1 @c1:L_dpEGFR(c_cbl,frs2!73,p~0,shc)@c1.FRS2(l_dpegfr!73,p~0,ptrka)@c1 #FRS2_dpEGFR
	Species pDok_RasGAP_c1 @c1:Dok(p~P,rasgap!78)@c1.RasGAP(dok!78)@c1 #pDok_RasGAP
	Species pMEK_c1 @c1:MEK(b_raf,erk,p~P,p2~0,ras_gtp)@c1 #pMEK
	Species FRS2_dpEGFR_c_Cbl_c1 @c1:L_dpEGFR(c_cbl!74,frs2!73,p~0,shc)@c1.FRS2(l_dpegfr!73,p~0,ptrka)@c1.c_Cbl(l_dpegfr!74,proteasome)@c1 #FRS2_dpEGFR_c_Cbl
	Species pFRS2_dpEGFR_c_Cbl_ubiq_c1 @c1:pFRS2_dpEGFR_c_Cbl_ubiq()@c1 #pFRS2_dpEGFR_c_Cbl_ubiq
	Species Ras_GTP_c1 @c1:Ras_GTP(Ras_GDP~0,b_raf,c_raf,mek)@c1 #Ras_GTP
	Species Crk_C3G_pFRS2_dpEGFR_c_Cbl_ubiq_c1 @c1:Crk_C3G_pFRS2_dpEGFR_c_Cbl_ubiq()@c1 #Crk_C3G_pFRS2_dpEGFR_c_Cbl_ubiq
	Species c_Raf_Ras_GTP_c1 @c1:Ras_GTP(Ras_GDP~0,b_raf,c_raf!75,mek)@c1.c_Raf(ras_gtp!75)@c1 #c_Raf_Ras_GTP
	Species B_Raf_Ras_GTP_c1 @c1:Ras_GTP(Ras_GDP~0,b_raf!76,c_raf,mek)@c1.B_Raf(mek,rap1,ras_gtp!76)@c1 #B_Raf_Ras_GTP
	Species ppMEK_c1 @c1:MEK(b_raf,erk,p~P,p2~P,ras_gtp)@c1 #ppMEK
	Species ppERK_c1 @c1:ERK(erk,mek,mkp3,pp~PP)@c1 #ppERK
	Species pTrkA_compartment @compartment:pTrkA(_endo~0,degradation~0,frs2,shc)@compartment #pTrkA
	Species Crk_C3G_c1 @c1:Crk(c3g!69)@c1.C3G(crk!69)@c1 #Crk_C3G
	Species Rap1_GTP_c1 @c1:Rap1(_gdp~0,_gtp~_GTP,b_raf)@c1 #Rap1_GTP
	Species L_NGFR_compartment @compartment:NGFR(ngf!68,pro_TrkA~0)@compartment.NGF(ngfr!68)@compartment #L_NGFR
	Species ppMEK_ERK_c1 @c1:MEK(b_raf,erk!32,p~P,p2~P,ras_gtp)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1 #ppMEK_ERK
	Species dppERK_c1 @c1:ERK(erk!80,mek,mkp3,pp~PP)@c1.ERK(erk!80,mek,mkp3,pp~PP)@c1 #dppERK
	Species Shc_pTrkA_c1 @c1:pTrkA(_endo~0,degradation~0,frs2,shc!70)@c1.Shc(l_dpegfr,p~0,ptrka!70)@c1 #Shc_pTrkA
	Species Shc_pTrkA_endo_c1 @c1:pTrkA(_endo~_ENDO,degradation~0,frs2,shc!70)@c1.Shc(l_dpegfr,p~0,ptrka!70)@c1 #Shc_pTrkA_endo
	Species pShc_pTrkA_c1 @c1:pTrkA(_endo~0,degradation~0,frs2,shc!70)@c1.Shc(l_dpegfr,p~P,ptrka!70)@c1 #pShc_pTrkA
	Species pFRS2_pTrkA_c1 @c1:pTrkA(_endo~0,degradation~0,frs2!72,shc)@c1.FRS2(l_dpegfr,p~P,ptrka!72)@c1 #pFRS2_pTrkA
	Species FRS2_pTrkA_c1 @c1:pTrkA(_endo~0,degradation~0,frs2!72,shc)@c1.FRS2(l_dpegfr,p~0,ptrka!72)@c1 #FRS2_pTrkA
	Species pShc_pTrkA_endo_c1 @c1:pTrkA(_endo~_ENDO,degradation~0,frs2,shc!70)@c1.Shc(l_dpegfr,p~P,ptrka!70)@c1 #pShc_pTrkA_endo
	Species FRS2_pTrkA_endo_c1 @c1:pTrkA(_endo~_ENDO,degradation~0,frs2!72,shc)@c1.FRS2(l_dpegfr,p~0,ptrka!72)@c1 #FRS2_pTrkA_endo
	Species pFRS2_pTrkA_endo_c1 @c1:pTrkA(_endo~_ENDO,degradation~0,frs2!72,shc)@c1.FRS2(l_dpegfr,p~P,ptrka!72)@c1 #pFRS2_pTrkA_endo
	Species Crk_C3G_pFRS2_pTrkA_endo_c1 @c1:Crk_C3G_pFRS2_pTrkA_endo()@c1 #Crk_C3G_pFRS2_pTrkA_endo
	Species Grb2_SOS_pShc_pTrkA_c1 @c1:Grb2_SOS_pShc_pTrkA()@c1 #Grb2_SOS_pShc_pTrkA
	Species Crk_C3G_pFRS2_pTrkA_c1 @c1:Crk_C3G_pFRS2_pTrkA()@c1 #Crk_C3G_pFRS2_pTrkA
	Species Grb2_SOS_pShc_pTrkA_endo_c1 @c1:Grb2_SOS_pShc_pTrkA_endo()@c1 #Grb2_SOS_pShc_pTrkA_endo
	Species c_Raf_Ras_GTP_MEK_c1 @c1:MEK(b_raf,erk,p~0,p2~0,ras_gtp!81)@c1.Ras_GTP(Ras_GDP~0,b_raf,c_raf!75,mek!81)@c1.c_Raf(ras_gtp!75)@c1 #c_Raf_Ras_GTP_MEK
	Species c_Raf_Ras_GTP_pMEK_c1 @c1:MEK(b_raf,erk,p~P,p2~0,ras_gtp!81)@c1.Ras_GTP(Ras_GDP~0,b_raf,c_raf!75,mek!81)@c1.c_Raf(ras_gtp!75)@c1 #c_Raf_Ras_GTP_pMEK
	Species c_Raf_Ras_GTP_MEK_ERK_c1 @c1:MEK(b_raf,erk!32,p~0,p2~0,ras_gtp!81)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1.Ras_GTP(Ras_GDP~0,b_raf,c_raf!75,mek!81)@c1.c_Raf(ras_gtp!75)@c1 #c_Raf_Ras_GTP_MEK_ERK
	Species c_Raf_Ras_GTP_pMEK_ERK_c1 @c1:MEK(b_raf,erk!32,p~P,p2~0,ras_gtp!81)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1.Ras_GTP(Ras_GDP~0,b_raf,c_raf!75,mek!81)@c1.c_Raf(ras_gtp!75)@c1 #c_Raf_Ras_GTP_pMEK_ERK
	Species B_Raf_Ras_GTP_MEK_c1 @c1:MEK(b_raf!82,erk,p~0,p2~0,ras_gtp!81)@c1.Ras_GTP(Ras_GDP~0,b_raf!76,c_raf,mek!81)@c1.B_Raf(mek!82,rap1,ras_gtp!76)@c1 #B_Raf_Ras_GTP_MEK
	Species B_Raf_Ras_GTP_pMEK_c1 @c1:MEK(b_raf!82,erk,p~P,p2~0,ras_gtp!81)@c1.Ras_GTP(Ras_GDP~0,b_raf!76,c_raf,mek!81)@c1.B_Raf(mek!82,rap1,ras_gtp!76)@c1 #B_Raf_Ras_GTP_pMEK
	Species B_Raf_Ras_GTP_MEK_ERK_c1 @c1:MEK(b_raf!82,erk!32,p~0,p2~0,ras_gtp!81)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1.Ras_GTP(Ras_GDP~0,b_raf!76,c_raf,mek!81)@c1.B_Raf(mek!82,rap1,ras_gtp!76)@c1 #B_Raf_Ras_GTP_MEK_ERK
	Species B_Raf_Ras_GTP_pMEK_ERK_c1 @c1:MEK(b_raf!82,erk!32,p~P,p2~0,ras_gtp!81)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1.Ras_GTP(Ras_GDP~0,b_raf!76,c_raf,mek!81)@c1.B_Raf(mek!82,rap1,ras_gtp!76)@c1 #B_Raf_Ras_GTP_pMEK_ERK
	Species B_Raf_Rap1_GTP_MEK_c1 @c1:MEK(b_raf!82,erk,p~0,p2~0,ras_gtp)@c1.Rap1(_gdp~0,_gtp~_GTP,b_raf!79)@c1.B_Raf(mek!82,rap1!79,ras_gtp)@c1 #B_Raf_Rap1_GTP_MEK
	Species B_Raf_Rap1_GTP_pMEK_c1 @c1:MEK(b_raf!82,erk,p~P,p2~0,ras_gtp)@c1.Rap1(_gdp~0,_gtp~_GTP,b_raf!79)@c1.B_Raf(mek!82,rap1!79,ras_gtp)@c1 #B_Raf_Rap1_GTP_pMEK
	Species B_Raf_Rap1_GTP_MEK_ERK_c1 @c1:MEK(b_raf!82,erk!32,p~0,p2~0,ras_gtp)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1.Rap1(_gdp~0,_gtp~_GTP,b_raf!79)@c1.B_Raf(mek!82,rap1!79,ras_gtp)@c1 #B_Raf_Rap1_GTP_MEK_ERK
	Species B_Raf_Rap1_GTP_pMEK_ERK_c1 @c1:MEK(b_raf!82,erk!32,p~P,p2~0,ras_gtp)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1.Rap1(_gdp~0,_gtp~_GTP,b_raf!79)@c1.B_Raf(mek!82,rap1!79,ras_gtp)@c1 #B_Raf_Rap1_GTP_pMEK_ERK
	Species ppERK_MKP3_c1 @c1:ERK(erk,mek,mkp3!39,pp~PP)@c1.MKP3(erk!39)@c1 #ppERK_MKP3
	Species dppERK_MKP3_c1 @c1:ERK(erk!80,mek,mkp3!39,pp~PP)@c1.ERK(erk!80,mek,mkp3,pp~PP)@c1.MKP3(erk!39)@c1 #dppERK_MKP3
	Species pro_TrkA_c1 @c1:NGFR(ngf,pro_TrkA~pro_TrkA)@c1 #pro_TrkA
	Species NGF_compartment @compartment:NGF(ngfr)@compartment #NGF
	Species EGF_compartment @compartment:EGF(egfr)@compartment #EGF
	Species pro_EGFR_c1 @c1:EGFR(egf,pro_~PRO_)@c1 #pro_EGFR
	Species degradation_c1 @c1:pTrkA(_endo~_ENDO,degradation~degradation,frs2,shc)@c1 #degradation
end observables
begin functions
	fRate30() = 0.2*Dok_c1*(Crk_C3G_pFRS2_dpEGFR_c1 + Crk_C3G_pFRS2_dpEGFR_c_Cbl_c1 + FRS2_dpEGFR_c1 + FRS2_dpEGFR_c_Cbl_c1 + Grb2_SOS_pShc_dpEGFR_c1 + Grb2_SOS_pShc_dpEGFR_c_Cbl_c1 + L_dpEGFR_compartment + Shc_dpEGFR_c1 + Shc_dpEGFR_c_Cbl_c1 + dpEGFR_c_Cbl_c1 + pFRS2_dpEGFR_c1 + pShc_dpEGFR_c1 + pShc_dpEGFR_c_Cbl_c1)/(Dok_c1 + 0.1)
	fRate48() = 1.0*dppERK_c1/(SOS_Grb2_c1 + 25.641)
	fRate49() = 1.0*dppERK_c1/(SOS_c1 + 25.641)
	fRate53() = 3.0*PP2A_c1/(ppMEK_c1 + 15.657)
	fRate54() = 3.0*PP2A_c1/(pMEK_c1 + 15.657)
	fRate55() = 3.0*PP2A_c1/(ppMEK_ERK_c1 + 15.657)
	fRate56() = 3.0*PP2A_c1/(pMEK_ERK_c1 + 15.657)
	fRate60() = 0.024*Rap1_GDP_c1*(Crk_C3G_pFRS2_dpEGFR_c1 + Crk_C3G_pFRS2_dpEGFR_c_Cbl_c1 + Crk_C3G_pFRS2_pTrkA_endo_c1)/(Rap1_GDP_c1 + 0.01)
	fRate61() = 2.0*Ras_GDP_c1*(Grb2_SOS_pShc_dpEGFR_c1 + Grb2_SOS_pShc_dpEGFR_c_Cbl_c1 + Grb2_SOS_pShc_pTrkA_c1)/(Ras_GDP_c1 + 0.02)
	fRate110() = 10.0*pDok_RasGAP_c1/(Ras_GTP_c1 + 1.0)
	fRate111() = 2.0*Rap1GAP_c1/(Rap1_GTP_c1 + 1.0)
	fRate112() = 0.02*Dok_c1*(Crk_C3G_pFRS2_pTrkA_c1 + FRS2_pTrkA_c1 + Grb2_SOS_pShc_pTrkA_c1 + Shc_pTrkA_c1 + pFRS2_pTrkA_c1 + pShc_pTrkA_c1 + pTrkA_compartment)/(Dok_c1 + 0.1)
	fRate113() = 1.0*dppERK_c1/(Grb2_SOS_pShc_c1 + 25.641)
	fRate118() = 10.0*pDok_RasGAP_c1/(c_Raf_Ras_GTP_c1 + 1.0)
	fRate119() = 10.0*pDok_RasGAP_c1/(B_Raf_Ras_GTP_c1 + 1.0)
	fRate120() = 2.0*Rap1GAP_c1/(B_Raf_Rap1_GTP_c1 + 1.0)
end functions
begin reaction rules
	re1: EGFR(egf,pro_~PRO_)@c1 <-> EGFR(egf,pro_~0)@compartment r1_re1_k1,r1_re1_k2
	re2: EGF(egfr)@compartment + EGFR(egf,pro_~0)@compartment <-> EGFR(egf!24,pro_~0)@compartment.EGF(egfr!24)@compartment r2_re2_k1,r2_re2_k2
	re8: EGFR(egf!24,pro_~0)@compartment.EGF(egfr!24)@compartment + EGFR(egf!24,pro_~0)@compartment.EGF(egfr!24)@compartment <-> L_EGFR_dimer()@compartment r3_re8_k1,r3_re8_k2
	J3: SOS(grb2,p~0)@c1 + Grb2(sos)@c1 <-> SOS(grb2!64,p~0)@c1.Grb2(sos!64)@c1 r4_J3_k1,r4_J3_k2
	J4: Grb2(sos)@c1 + SOS(grb2,p~P)@c1 <-> SOS(grb2!64,p~P)@c1.Grb2(sos!64)@c1 r5_J4_k1,r5_J4_k2
	J5: L_EGFR_dimer()@compartment <-> L_dpEGFR(c_cbl,frs2,p~0,shc)@compartment r6_J5_k1,r6_J5_k2
	J6: L_dpEGFR(c_cbl,frs2,p~0,shc)@compartment + c_Cbl(l_dpegfr,proteasome)@c1 <-> L_dpEGFR(c_cbl!74,frs2,p~0,shc)@c1.c_Cbl(l_dpegfr!74,proteasome)@c1 r7_J6_k1,r7_J6_k2
	J7: L_dpEGFR(c_cbl,frs2,p~0,shc)@compartment + Shc(l_dpegfr,p~P,ptrka)@c1 <-> L_dpEGFR(c_cbl,frs2,p~P,shc!71)@c1.Shc(l_dpegfr!71,p~0,ptrka)@c1 r8_J7_k1,r8_J7_k2
	J8: Dok(p~P,rasgap)@c1 <-> Dok(p~0,rasgap)@c1 r9_J8_k1,r9_J8_k2
	J9: c_Cbl(l_dpegfr,proteasome)@c1 + L_dpEGFR(c_cbl,frs2,p~P,shc!71)@c1.Shc(l_dpegfr!71,p~0,ptrka)@c1 <-> L_dpEGFR(c_cbl!74,frs2,p~P,shc!71)@c1.Shc(l_dpegfr!71,p~0,ptrka)@c1.c_Cbl(l_dpegfr!74,proteasome)@c1 r10_J9_k1,r10_J9_k2
	J10: SOS(grb2,p~P)@c1 -> SOS(grb2,p~0)@c1 r11_J10_k
	J11: SOS(grb2!64,p~P)@c1.Grb2(sos!64)@c1 -> SOS(grb2!64,p~0)@c1.Grb2(sos!64)@c1 r12_J11_k
	J12: L_dpEGFR(c_cbl,frs2,p~0,shc)@compartment + Shc(l_dpegfr,p~0,ptrka)@c1 <-> L_dpEGFR(c_cbl,frs2,p~0,shc!71)@c1.Shc(l_dpegfr!71,p~0,ptrka)@c1 r13_J12_k1,r13_J12_k2
	J13: L_dpEGFR(c_cbl,frs2,p~0,shc!71)@c1.Shc(l_dpegfr!71,p~0,ptrka)@c1 -> L_dpEGFR(c_cbl,frs2,p~P,shc!71)@c1.Shc(l_dpegfr!71,p~0,ptrka)@c1 r14_J13_k
	J14: L_dpEGFR(c_cbl!74,frs2,p~0,shc)@c1.c_Cbl(l_dpegfr!74,proteasome)@c1 -> c_Cbl(l_dpegfr,proteasome!77)@c1.proteasome(c_cbl!77)@c1 r15_J14_k
	J15: c_Cbl(l_dpegfr,proteasome!77)@c1.proteasome(c_cbl!77)@c1 -> proteasome(c_cbl)@c1 + c_Cbl(l_dpegfr,proteasome)@c1 r16_J15_k
	J16: c_Cbl(l_dpegfr,proteasome)@c1 + L_dpEGFR(c_cbl,frs2,p~0,shc!71)@c1.Shc(l_dpegfr!71,p~0,ptrka)@c1 <-> L_dpEGFR(c_cbl!74,frs2,p~0,shc!71)@c1.Shc(l_dpegfr!71,p~0,ptrka)@c1.c_Cbl(l_dpegfr!74,proteasome)@c1 r17_J16_k1,r17_J16_k2
	J17: L_dpEGFR(c_cbl!74,frs2,p~0,shc!71)@c1.Shc(l_dpegfr!71,p~0,ptrka)@c1.c_Cbl(l_dpegfr!74,proteasome)@c1 -> Shc_dpEGFR_c_Cbl_ubiq()@c1 r18_J17_k
	J18: Shc_dpEGFR_c_Cbl_ubiq()@c1 -> proteasome(c_cbl)@c1 + c_Cbl(l_dpegfr,proteasome)@c1 + Shc(l_dpegfr,p~0,ptrka)@c1 r19_J18_k
	J19: L_dpEGFR(c_cbl!74,frs2,p~P,shc!71)@c1.Shc(l_dpegfr!71,p~0,ptrka)@c1.c_Cbl(l_dpegfr!74,proteasome)@c1 -> pShc_dpEGFR_c_Cbl_ubiq()@c1 r20_J19_k
	J20: pShc_dpEGFR_c_Cbl_ubiq()@c1 -> proteasome(c_cbl)@c1 + c_Cbl(l_dpegfr,proteasome)@c1 + Shc(l_dpegfr,p~P,ptrka)@c1 r21_J20_k
	J21: L_dpEGFR(c_cbl!74,frs2,p~0,shc!71)@c1.Shc(l_dpegfr!71,p~0,ptrka)@c1.c_Cbl(l_dpegfr!74,proteasome)@c1 -> L_dpEGFR(c_cbl!74,frs2,p~P,shc!71)@c1.Shc(l_dpegfr!71,p~0,ptrka)@c1.c_Cbl(l_dpegfr!74,proteasome)@c1 r22_J21_k
	J22: Shc(l_dpegfr,p~P,ptrka)@c1 + SOS(grb2!64,p~0)@c1.Grb2(sos!64)@c1 <-> Grb2_SOS_pShc()@c1 r23_J22_k1,r23_J22_k2
	J23: L_dpEGFR(c_cbl,frs2,p~0,shc)@compartment + Grb2_SOS_pShc()@c1 <-> Grb2_SOS_pShc_dpEGFR()@c1 r24_J23_k1,r24_J23_k2
	J24: L_dpEGFR(c_cbl,frs2,p~P,shc!71)@c1.Shc(l_dpegfr!71,p~0,ptrka)@c1 + SOS(grb2!64,p~0)@c1.Grb2(sos!64)@c1 <-> Grb2_SOS_pShc_dpEGFR()@c1 r25_J24_k1,r25_J24_k2
	J25: c_Cbl(l_dpegfr,proteasome)@c1 + Grb2_SOS_pShc_dpEGFR()@c1 <-> Grb2_SOS_pShc_dpEGFR_c_Cbl()@c1 r26_J25_k1,r26_J25_k2
	J27: L_dpEGFR(c_cbl!74,frs2,p~0,shc)@c1.c_Cbl(l_dpegfr!74,proteasome)@c1 + Grb2_SOS_pShc()@c1 <-> Grb2_SOS_pShc_dpEGFR_c_Cbl()@c1 r27_J27_k1,r27_J27_k2
	J28: Grb2_SOS_pShc_dpEGFR_c_Cbl()@c1 -> Grb2_SOS_pShc_dpEGFR_c_Cbl_ubiq()@c1 r28_J28_k
	J29: Grb2_SOS_pShc_dpEGFR_c_Cbl_ubiq()@c1 -> proteasome(c_cbl)@c1 + c_Cbl(l_dpegfr,proteasome)@c1 + Grb2_SOS_pShc()@c1 r29_J29_k
	J30: Grb2_SOS_pShc()@c1 -> Shc(l_dpegfr,p~0,ptrka)@c1 + SOS(grb2!64,p~0)@c1.Grb2(sos!64)@c1 r30_J30_k
	J31_reactants_0: 0  -> Dok(p~0,rasgap)@c1 -1*(fRate30()) #Modifiers(L_dpEGFR, Shc_dpEGFR, pShc_dpEGFR, Grb2_SOS_pShc_dpEGFR_c_Cbl, Grb2_SOS_pShc_dpEGFR, dpEGFR_c_Cbl, Shc_dpEGFR_c_Cbl, pShc_dpEGFR_c_Cbl, FRS2_dpEGFR, pFRS2_dpEGFR, Crk_C3G_pFRS2_dpEGFR, FRS2_dpEGFR_c_Cbl, Crk_C3G_pFRS2_dpEGFR_c_Cbl)
	J31_products_0: 0  -> Dok(p~P,rasgap)@c1 fRate30() #Modifiers(L_dpEGFR, Shc_dpEGFR, pShc_dpEGFR, Grb2_SOS_pShc_dpEGFR_c_Cbl, Grb2_SOS_pShc_dpEGFR, dpEGFR_c_Cbl, Shc_dpEGFR_c_Cbl, pShc_dpEGFR_c_Cbl, FRS2_dpEGFR, pFRS2_dpEGFR, Crk_C3G_pFRS2_dpEGFR, FRS2_dpEGFR_c_Cbl, Crk_C3G_pFRS2_dpEGFR_c_Cbl)
	J32: Shc(l_dpegfr,p~P,ptrka)@c1 -> Shc(l_dpegfr,p~0,ptrka)@c1 r32_J32_k
	J33: FRS2(l_dpegfr,p~P,ptrka)@c1 -> FRS2(l_dpegfr,p~0,ptrka)@c1 r33_J33_k
	J34: Crk(c3g)@c1 + C3G(crk)@c1 <-> Crk(c3g!69)@c1.C3G(crk!69)@c1 r34_J34_k1,r34_J34_k2
	J35: L_dpEGFR(c_cbl,frs2,p~0,shc)@compartment + FRS2(l_dpegfr,p~0,ptrka)@c1 <-> L_dpEGFR(c_cbl,frs2!73,p~0,shc)@c1.FRS2(l_dpegfr!73,p~0,ptrka)@c1 r35_J35_k1,r35_J35_k2
	J36: L_dpEGFR(c_cbl,frs2,p~0,shc)@compartment + FRS2(l_dpegfr,p~P,ptrka)@c1 <-> L_dpEGFR(c_cbl,frs2!73,p~P,shc)@c1.FRS2(l_dpegfr!73,p~0,ptrka)@c1 r36_J36_k1,r36_J36_k2
	J37: L_dpEGFR(c_cbl,frs2!73,p~0,shc)@c1.FRS2(l_dpegfr!73,p~0,ptrka)@c1 -> L_dpEGFR(c_cbl,frs2!73,p~P,shc)@c1.FRS2(l_dpegfr!73,p~0,ptrka)@c1 r37_J37_k
	J38: L_dpEGFR(c_cbl,frs2!73,p~P,shc)@c1.FRS2(l_dpegfr!73,p~0,ptrka)@c1 + Crk(c3g!69)@c1.C3G(crk!69)@c1 <-> Crk_C3G_pFRS2_dpEGFR()@c1 r38_J38_k1,r38_J38_k2
	J39: L_dpEGFR(c_cbl,frs2!73,p~0,shc)@c1.FRS2(l_dpegfr!73,p~0,ptrka)@c1 + c_Cbl(l_dpegfr,proteasome)@c1 <-> L_dpEGFR(c_cbl!74,frs2!73,p~0,shc)@c1.FRS2(l_dpegfr!73,p~0,ptrka)@c1.c_Cbl(l_dpegfr!74,proteasome)@c1 r39_J39_k1,r39_J39_k2
	J40: c_Cbl(l_dpegfr,proteasome)@c1 + L_dpEGFR(c_cbl,frs2!73,p~P,shc)@c1.FRS2(l_dpegfr!73,p~0,ptrka)@c1 <-> L_dpEGFR(c_cbl!74,frs2!73,p~P,shc)@c1.FRS2(l_dpegfr!73,p~0,ptrka)@c1.c_Cbl(l_dpegfr!74,proteasome)@c1 r40_J40_k1,r40_J40_k2
	J41: L_dpEGFR(c_cbl!74,frs2!73,p~P,shc)@c1.FRS2(l_dpegfr!73,p~0,ptrka)@c1.c_Cbl(l_dpegfr!74,proteasome)@c1 -> pFRS2_dpEGFR_c_Cbl_ubiq()@c1 r41_J41_k
	J42: L_dpEGFR(c_cbl!74,frs2!73,p~0,shc)@c1.FRS2(l_dpegfr!73,p~0,ptrka)@c1.c_Cbl(l_dpegfr!74,proteasome)@c1 -> FRS2_dpEGFR_c_Cbl_ubiq()@c1 r42_J42_k
	J43: L_dpEGFR(c_cbl!74,frs2!73,p~0,shc)@c1.FRS2(l_dpegfr!73,p~0,ptrka)@c1.c_Cbl(l_dpegfr!74,proteasome)@c1 -> L_dpEGFR(c_cbl!74,frs2!73,p~P,shc)@c1.FRS2(l_dpegfr!73,p~0,ptrka)@c1.c_Cbl(l_dpegfr!74,proteasome)@c1 r43_J43_k
	J44: L_dpEGFR(c_cbl!74,frs2!73,p~P,shc)@c1.FRS2(l_dpegfr!73,p~0,ptrka)@c1.c_Cbl(l_dpegfr!74,proteasome)@c1 + Crk(c3g!69)@c1.C3G(crk!69)@c1 <-> Crk_C3G_pFRS2_dpEGFR_c_Cbl()@c1 r44_J44_k1,r44_J44_k2
	J45: Crk_C3G_pFRS2_dpEGFR_c_Cbl()@c1 -> Crk_C3G_pFRS2_dpEGFR_c_Cbl_ubiq()@c1 r45_J45_k
	J46: FRS2_dpEGFR_c_Cbl_ubiq()@c1 -> proteasome(c_cbl)@c1 + c_Cbl(l_dpegfr,proteasome)@c1 + FRS2(l_dpegfr,p~0,ptrka)@c1 r46_J46_k
	J47: pFRS2_dpEGFR_c_Cbl_ubiq()@c1 -> proteasome(c_cbl)@c1 + c_Cbl(l_dpegfr,proteasome)@c1 + FRS2(l_dpegfr,p~P,ptrka)@c1 r47_J47_k
	J49: Dok(p~P,rasgap)@c1 + RasGAP(dok)@c1 <-> Dok(p~P,rasgap!78)@c1.RasGAP(dok!78)@c1 r48_J49_k1,r48_J49_k2
	J50: SOS(grb2!64,p~0)@c1.Grb2(sos!64)@c1 -> SOS(grb2!64,p~P)@c1.Grb2(sos!64)@c1 fRate48() #Modifiers(dppERK)
	J51: SOS(grb2,p~0)@c1 -> SOS(grb2,p~P)@c1 fRate49() #Modifiers(dppERK)
	J52: c_Raf(ras_gtp)@c1 + Ras_GTP(Ras_GDP~0,b_raf,c_raf,mek)@c1 <-> Ras_GTP(Ras_GDP~0,b_raf,c_raf!75,mek)@c1.c_Raf(ras_gtp!75)@c1 r51_J52_k1,r51_J52_k2
	J53: Rap1(_gdp~0,_gtp~_GTP,b_raf)@c1 + B_Raf(mek,rap1,ras_gtp)@c1 <-> Rap1(_gdp~0,_gtp~_GTP,b_raf!79)@c1.B_Raf(mek,rap1!79,ras_gtp)@c1 r52_J53_k1,r52_J53_k2
	J54: Ras_GTP(Ras_GDP~0,b_raf,c_raf,mek)@c1 + B_Raf(mek,rap1,ras_gtp)@c1 <-> Ras_GTP(Ras_GDP~0,b_raf!76,c_raf,mek)@c1.B_Raf(mek,rap1,ras_gtp!76)@c1 r53_J54_k1,r53_J54_k2
	J57: MEK(b_raf,erk,p~P,p2~P,ras_gtp)@c1 -> MEK(b_raf,erk,p~P,p2~0,ras_gtp)@c1 fRate53() #Modifiers(PP2A)
	J58: MEK(b_raf,erk,p~P,p2~0,ras_gtp)@c1 -> MEK(b_raf,erk,p~0,p2~0,ras_gtp)@c1 fRate54() #Modifiers(PP2A)
	J61: MEK(b_raf,erk!32,p~P,p2~P,ras_gtp)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1 -> MEK(b_raf,erk!32,p~P,p2~0,ras_gtp)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1 fRate55() #Modifiers(PP2A)
	J62: MEK(b_raf,erk!32,p~P,p2~0,ras_gtp)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1 -> MEK(b_raf,erk!32,p~0,p2~0,ras_gtp)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1 fRate56() #Modifiers(PP2A)
	J63: ERK(erk,mek,mkp3,pp~PP)@c1 + ERK(erk,mek,mkp3,pp~PP)@c1 <-> ERK(erk!80,mek,mkp3,pp~PP)@c1.ERK(erk!80,mek,mkp3,pp~PP)@c1 r58_J63_k1,r58_J63_k2
	J66: Ras_GTP(Ras_GDP~0,b_raf,c_raf,mek)@c1 -> Ras_GTP(Ras_GDP~Ras_GDP,b_raf,c_raf,mek)@c1 r59_J66_k
	J67: Rap1(_gdp~0,_gtp~_GTP,b_raf)@c1 -> Rap1(_gdp~_GDP,_gtp~0,b_raf)@c1 r60_J67_k
	J68_reactants_0: 0  -> Rap1(_gdp~_GDP,_gtp~0,b_raf)@c1 -1*(fRate60()) #Modifiers(Crk_C3G_pFRS2_dpEGFR_c_Cbl, Crk_C3G_pFRS2_dpEGFR, Crk_C3G_pFRS2_pTrkA_endo)
	J68_products_0: 0  -> Rap1(_gdp~0,_gtp~_GTP,b_raf)@c1 fRate60() #Modifiers(Crk_C3G_pFRS2_dpEGFR_c_Cbl, Crk_C3G_pFRS2_dpEGFR, Crk_C3G_pFRS2_pTrkA_endo)
	J69_reactants_0: 0  -> Ras_GTP(Ras_GDP~Ras_GDP,b_raf,c_raf,mek)@c1 -1*(fRate61()) #Modifiers(Grb2_SOS_pShc_dpEGFR_c_Cbl, Grb2_SOS_pShc_dpEGFR, Grb2_SOS_pShc_pTrkA)
	J69_products_0: 0  -> Ras_GTP(Ras_GDP~0,b_raf,c_raf,mek)@c1 fRate61() #Modifiers(Grb2_SOS_pShc_dpEGFR_c_Cbl, Grb2_SOS_pShc_dpEGFR, Grb2_SOS_pShc_pTrkA)
	J70: NGF(ngfr)@compartment + NGFR(ngf,pro_TrkA~0)@compartment <-> NGFR(ngf!68,pro_TrkA~0)@compartment.NGF(ngfr!68)@compartment r63_J70_k1,r63_J70_k2
	J71: NGFR(ngf!68,pro_TrkA~0)@compartment.NGF(ngfr!68)@compartment -> pTrkA(_endo~0,degradation~0,frs2,shc)@compartment r64_J71_k
	J72: pTrkA(_endo~0,degradation~0,frs2,shc)@compartment -> pTrkA(_endo~_ENDO,degradation~0,frs2,shc)@c1 r65_J72_k
	J73: pTrkA(_endo~_ENDO,degradation~0,frs2,shc)@c1 -> pTrkA(_endo~_ENDO,degradation~degradation,frs2,shc)@c1 r66_J73_k
	J74: pTrkA(_endo~0,degradation~0,frs2,shc)@compartment -> pTrkA(_endo~_ENDO,degradation~degradation,frs2,shc)@c1 r67_J74_k
	J75: Shc(l_dpegfr,p~0,ptrka)@c1 + pTrkA(_endo~0,degradation~0,frs2,shc)@compartment <-> pTrkA(_endo~0,degradation~0,frs2,shc!70)@c1.Shc(l_dpegfr,p~0,ptrka!70)@c1 r68_J75_k1,r68_J75_k2
	J76: Shc(l_dpegfr,p~P,ptrka)@c1 + pTrkA(_endo~0,degradation~0,frs2,shc)@compartment <-> pTrkA(_endo~0,degradation~0,frs2,shc!70)@c1.Shc(l_dpegfr,p~P,ptrka!70)@c1 r69_J76_k1,r69_J76_k2
	J77: FRS2(l_dpegfr,p~0,ptrka)@c1 + pTrkA(_endo~0,degradation~0,frs2,shc)@compartment <-> pTrkA(_endo~0,degradation~0,frs2!72,shc)@c1.FRS2(l_dpegfr,p~0,ptrka!72)@c1 r70_J77_k1,r70_J77_k2
	J78: FRS2(l_dpegfr,p~P,ptrka)@c1 + pTrkA(_endo~0,degradation~0,frs2,shc)@compartment <-> pTrkA(_endo~0,degradation~0,frs2!72,shc)@c1.FRS2(l_dpegfr,p~P,ptrka!72)@c1 r71_J78_k1,r71_J78_k2
	J79: pTrkA(_endo~_ENDO,degradation~0,frs2,shc)@c1 + Shc(l_dpegfr,p~0,ptrka)@c1 <-> pTrkA(_endo~_ENDO,degradation~0,frs2,shc!70)@c1.Shc(l_dpegfr,p~0,ptrka!70)@c1 r72_J79_k1,r72_J79_k2
	J80: pTrkA(_endo~_ENDO,degradation~0,frs2,shc)@c1 + Shc(l_dpegfr,p~P,ptrka)@c1 <-> pTrkA(_endo~_ENDO,degradation~0,frs2,shc!70)@c1.Shc(l_dpegfr,p~P,ptrka!70)@c1 r73_J80_k1,r73_J80_k2
	J81: pTrkA(_endo~_ENDO,degradation~0,frs2,shc!70)@c1.Shc(l_dpegfr,p~0,ptrka!70)@c1 -> pTrkA(_endo~_ENDO,degradation~0,frs2,shc!70)@c1.Shc(l_dpegfr,p~P,ptrka!70)@c1 r74_J81_k
	J82: pTrkA(_endo~0,degradation~0,frs2,shc!70)@c1.Shc(l_dpegfr,p~0,ptrka!70)@c1 -> pTrkA(_endo~0,degradation~0,frs2,shc!70)@c1.Shc(l_dpegfr,p~P,ptrka!70)@c1 r75_J82_k
	J83: pTrkA(_endo~0,degradation~0,frs2!72,shc)@c1.FRS2(l_dpegfr,p~0,ptrka!72)@c1 -> pTrkA(_endo~0,degradation~0,frs2!72,shc)@c1.FRS2(l_dpegfr,p~P,ptrka!72)@c1 r76_J83_k
	J84: pTrkA(_endo~_ENDO,degradation~0,frs2,shc)@c1 + FRS2(l_dpegfr,p~0,ptrka)@c1 <-> pTrkA(_endo~_ENDO,degradation~0,frs2!72,shc)@c1.FRS2(l_dpegfr,p~0,ptrka!72)@c1 r77_J84_k1,r77_J84_k2
	J85: pTrkA(_endo~_ENDO,degradation~0,frs2,shc)@c1 + FRS2(l_dpegfr,p~P,ptrka)@c1 <-> pTrkA(_endo~_ENDO,degradation~0,frs2!72,shc)@c1.FRS2(l_dpegfr,p~P,ptrka!72)@c1 r78_J85_k1,r78_J85_k2
	J86: pTrkA(_endo~_ENDO,degradation~0,frs2!72,shc)@c1.FRS2(l_dpegfr,p~0,ptrka!72)@c1 -> pTrkA(_endo~_ENDO,degradation~0,frs2!72,shc)@c1.FRS2(l_dpegfr,p~P,ptrka!72)@c1 r79_J86_k
	J87: pTrkA(_endo~0,degradation~0,frs2!72,shc)@c1.FRS2(l_dpegfr,p~0,ptrka!72)@c1 -> pTrkA(_endo~_ENDO,degradation~degradation,frs2,shc)@c1 + FRS2(l_dpegfr,p~0,ptrka)@c1 r80_J87_k
	J88: pTrkA(_endo~0,degradation~0,frs2!72,shc)@c1.FRS2(l_dpegfr,p~P,ptrka!72)@c1 -> pTrkA(_endo~_ENDO,degradation~degradation,frs2,shc)@c1 + FRS2(l_dpegfr,p~P,ptrka)@c1 r81_J88_k
	J89: pTrkA(_endo~0,degradation~0,frs2,shc!70)@c1.Shc(l_dpegfr,p~0,ptrka!70)@c1 -> pTrkA(_endo~_ENDO,degradation~degradation,frs2,shc)@c1 + Shc(l_dpegfr,p~0,ptrka)@c1 r82_J89_k
	J90: pTrkA(_endo~0,degradation~0,frs2,shc!70)@c1.Shc(l_dpegfr,p~P,ptrka!70)@c1 -> pTrkA(_endo~_ENDO,degradation~degradation,frs2,shc)@c1 + Shc(l_dpegfr,p~P,ptrka)@c1 r83_J90_k
	J92: pTrkA(_endo~_ENDO,degradation~0,frs2!72,shc)@c1.FRS2(l_dpegfr,p~0,ptrka!72)@c1 -> pTrkA(_endo~_ENDO,degradation~degradation,frs2,shc)@c1 + FRS2(l_dpegfr,p~0,ptrka)@c1 r84_J92_k
	J93: pTrkA(_endo~_ENDO,degradation~0,frs2,shc!70)@c1.Shc(l_dpegfr,p~0,ptrka!70)@c1 -> pTrkA(_endo~_ENDO,degradation~degradation,frs2,shc)@c1 + Shc(l_dpegfr,p~0,ptrka)@c1 r85_J93_k
	J94: pTrkA(_endo~_ENDO,degradation~0,frs2,shc!70)@c1.Shc(l_dpegfr,p~P,ptrka!70)@c1 -> pTrkA(_endo~_ENDO,degradation~degradation,frs2,shc)@c1 + Shc(l_dpegfr,p~P,ptrka)@c1 r86_J94_k
	J95: SOS(grb2!64,p~0)@c1.Grb2(sos!64)@c1 + pTrkA(_endo~_ENDO,degradation~0,frs2,shc!70)@c1.Shc(l_dpegfr,p~P,ptrka!70)@c1 <-> Grb2_SOS_pShc_pTrkA_endo()@c1 r87_J95_k1,r87_J95_k2
	J96: SOS(grb2!64,p~0)@c1.Grb2(sos!64)@c1 + pTrkA(_endo~0,degradation~0,frs2,shc!70)@c1.Shc(l_dpegfr,p~P,ptrka!70)@c1 <-> Grb2_SOS_pShc_pTrkA()@c1 r88_J96_k1,r88_J96_k2
	J97: Grb2_SOS_pShc_pTrkA()@c1 -> Grb2_SOS_pShc_pTrkA_endo()@c1 r89_J97_k
	J98: Crk_C3G_pFRS2_pTrkA()@c1 -> Crk_C3G_pFRS2_pTrkA_endo()@c1 r90_J98_k
	J99: pTrkA(_endo~0,degradation~0,frs2!72,shc)@c1.FRS2(l_dpegfr,p~P,ptrka!72)@c1 -> pTrkA(_endo~_ENDO,degradation~0,frs2!72,shc)@c1.FRS2(l_dpegfr,p~P,ptrka!72)@c1 r91_J99_k
	J100: pTrkA(_endo~0,degradation~0,frs2!72,shc)@c1.FRS2(l_dpegfr,p~0,ptrka!72)@c1 -> pTrkA(_endo~_ENDO,degradation~0,frs2!72,shc)@c1.FRS2(l_dpegfr,p~0,ptrka!72)@c1 r92_J100_k
	J101: pTrkA(_endo~0,degradation~0,frs2,shc!70)@c1.Shc(l_dpegfr,p~P,ptrka!70)@c1 -> pTrkA(_endo~_ENDO,degradation~0,frs2,shc!70)@c1.Shc(l_dpegfr,p~P,ptrka!70)@c1 r93_J101_k
	J102: pTrkA(_endo~0,degradation~0,frs2,shc!70)@c1.Shc(l_dpegfr,p~0,ptrka!70)@c1 -> pTrkA(_endo~_ENDO,degradation~0,frs2,shc!70)@c1.Shc(l_dpegfr,p~0,ptrka!70)@c1 r94_J102_k
	J103: Crk(c3g!69)@c1.C3G(crk!69)@c1 + pTrkA(_endo~0,degradation~0,frs2!72,shc)@c1.FRS2(l_dpegfr,p~P,ptrka!72)@c1 <-> Crk_C3G_pFRS2_pTrkA()@c1 r95_J103_k1,r95_J103_k2
	J104: Crk(c3g!69)@c1.C3G(crk!69)@c1 + pTrkA(_endo~_ENDO,degradation~0,frs2!72,shc)@c1.FRS2(l_dpegfr,p~P,ptrka!72)@c1 <-> Crk_C3G_pFRS2_pTrkA_endo()@c1 r96_J104_k1,r96_J104_k2
	J105: Grb2_SOS_pShc()@c1 + pTrkA(_endo~0,degradation~0,frs2,shc)@compartment <-> Grb2_SOS_pShc_pTrkA()@c1 r97_J105_k1,r97_J105_k2
	J106: Grb2_SOS_pShc()@c1 + pTrkA(_endo~_ENDO,degradation~0,frs2,shc)@c1 <-> Grb2_SOS_pShc_pTrkA_endo()@c1 r98_J106_k1,r98_J106_k2
	J107: Crk_C3G_pFRS2_pTrkA()@c1 -> pTrkA(_endo~_ENDO,degradation~degradation,frs2,shc)@c1 + FRS2(l_dpegfr,p~P,ptrka)@c1 + Crk(c3g!69)@c1.C3G(crk!69)@c1 r99_J107_k
	J108: Crk_C3G_pFRS2_pTrkA_endo()@c1 -> pTrkA(_endo~_ENDO,degradation~degradation,frs2,shc)@c1 + Crk(c3g!69)@c1.C3G(crk!69)@c1 + FRS2(l_dpegfr,p~P,ptrka)@c1 r100_J108_k
	J109: Grb2_SOS_pShc_pTrkA()@c1 -> pTrkA(_endo~_ENDO,degradation~degradation,frs2,shc)@c1 + Grb2_SOS_pShc()@c1 r101_J109_k
	J110: Grb2_SOS_pShc_pTrkA_endo()@c1 -> pTrkA(_endo~_ENDO,degradation~degradation,frs2,shc)@c1 + Grb2_SOS_pShc()@c1 r102_J110_k
	J112: pTrkA(_endo~_ENDO,degradation~0,frs2!72,shc)@c1.FRS2(l_dpegfr,p~P,ptrka!72)@c1 -> pTrkA(_endo~_ENDO,degradation~degradation,frs2,shc)@c1 + FRS2(l_dpegfr,p~P,ptrka)@c1 r103_J112_k
	J113: NGFR(ngf,pro_TrkA~pro_TrkA)@c1 <-> NGFR(ngf,pro_TrkA~0)@compartment r104_J113_k1,r104_J113_k2
	J115: Shc(l_dpegfr,p~0,ptrka)@c1 + L_dpEGFR(c_cbl!74,frs2,p~0,shc)@c1.c_Cbl(l_dpegfr!74,proteasome)@c1 <-> L_dpEGFR(c_cbl!74,frs2,p~0,shc!71)@c1.Shc(l_dpegfr!71,p~0,ptrka)@c1.c_Cbl(l_dpegfr!74,proteasome)@c1 r105_J115_k1,r105_J115_k2
	J116: L_dpEGFR(c_cbl!74,frs2,p~0,shc)@c1.c_Cbl(l_dpegfr!74,proteasome)@c1 + Shc(l_dpegfr,p~P,ptrka)@c1 <-> L_dpEGFR(c_cbl!74,frs2,p~P,shc!71)@c1.Shc(l_dpegfr!71,p~0,ptrka)@c1.c_Cbl(l_dpegfr!74,proteasome)@c1 r106_J116_k1,r106_J116_k2
	J117: L_dpEGFR(c_cbl!74,frs2,p~P,shc!71)@c1.Shc(l_dpegfr!71,p~0,ptrka)@c1.c_Cbl(l_dpegfr!74,proteasome)@c1 + SOS(grb2!64,p~0)@c1.Grb2(sos!64)@c1 <-> Grb2_SOS_pShc_dpEGFR_c_Cbl()@c1 r107_J117_k1,r107_J117_k2
	J119: c_Cbl(l_dpegfr,proteasome)@c1 + Crk_C3G_pFRS2_dpEGFR()@c1 <-> Crk_C3G_pFRS2_dpEGFR_c_Cbl()@c1 r108_J119_k1,r108_J119_k2
	J118: L_dpEGFR(c_cbl!74,frs2,p~0,shc)@c1.c_Cbl(l_dpegfr!74,proteasome)@c1 + FRS2(l_dpegfr,p~0,ptrka)@c1 <-> L_dpEGFR(c_cbl!74,frs2!73,p~0,shc)@c1.FRS2(l_dpegfr!73,p~0,ptrka)@c1.c_Cbl(l_dpegfr!74,proteasome)@c1 r109_J118_k1,r109_J118_k2
	J120: L_dpEGFR(c_cbl!74,frs2,p~0,shc)@c1.c_Cbl(l_dpegfr!74,proteasome)@c1 + FRS2(l_dpegfr,p~P,ptrka)@c1 <-> L_dpEGFR(c_cbl!74,frs2!73,p~P,shc)@c1.FRS2(l_dpegfr!73,p~0,ptrka)@c1.c_Cbl(l_dpegfr!74,proteasome)@c1 r110_J120_k1,r110_J120_k2
	J121: Ras_GTP(Ras_GDP~0,b_raf,c_raf,mek)@c1 -> Ras_GTP(Ras_GDP~Ras_GDP,b_raf,c_raf,mek)@c1 fRate110() #Modifiers(pDok_RasGAP)
	J122: Rap1(_gdp~0,_gtp~_GTP,b_raf)@c1 -> Rap1(_gdp~_GDP,_gtp~0,b_raf)@c1 fRate111() #Modifiers(Rap1GAP)
	J123_reactants_0: 0  -> Dok(p~0,rasgap)@c1 -1*(fRate112()) #Modifiers(pTrkA, Shc_pTrkA, pShc_pTrkA, Grb2_SOS_pShc_pTrkA, FRS2_pTrkA, pFRS2_pTrkA, Crk_C3G_pFRS2_pTrkA)
	J123_products_0: 0  -> Dok(p~P,rasgap)@c1 fRate112() #Modifiers(pTrkA, Shc_pTrkA, pShc_pTrkA, Grb2_SOS_pShc_pTrkA, FRS2_pTrkA, pFRS2_pTrkA, Crk_C3G_pFRS2_pTrkA)
	J124: Grb2_SOS_pShc()@c1 -> Shc(l_dpegfr,p~P,ptrka)@c1 + SOS(grb2!64,p~P)@c1.Grb2(sos!64)@c1 fRate113() #Modifiers(dppERK)
	J133: ERK(erk,mek,mkp3,pp~0)@c1 + MEK(b_raf,erk,p~0,p2~0,ras_gtp)@c1 <-> MEK(b_raf,erk!32,p~0,p2~0,ras_gtp)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1 r115_J133_k1,r115_J133_k2
	J134: ERK(erk,mek,mkp3,pp~0)@c1 + MEK(b_raf,erk,p~P,p2~0,ras_gtp)@c1 <-> MEK(b_raf,erk!32,p~P,p2~0,ras_gtp)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1 r116_J134_k1,r116_J134_k2
	J135: ERK(erk,mek,mkp3,pp~0)@c1 + MEK(b_raf,erk,p~P,p2~P,ras_gtp)@c1 <-> MEK(b_raf,erk!32,p~P,p2~P,ras_gtp)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1 r117_J135_k1,r117_J135_k2
	J136: MEK(b_raf,erk!32,p~P,p2~P,ras_gtp)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1 -> ERK(erk,mek,mkp3,pp~PP)@c1 + MEK(b_raf,erk,p~P,p2~P,ras_gtp)@c1 r118_J136_k
	J137: Ras_GTP(Ras_GDP~0,b_raf,c_raf!75,mek)@c1.c_Raf(ras_gtp!75)@c1 -> c_Raf(ras_gtp)@c1 + Ras_GTP(Ras_GDP~Ras_GDP,b_raf,c_raf,mek)@c1 fRate118() #Modifiers(pDok_RasGAP)
	J138: Ras_GTP(Ras_GDP~0,b_raf!76,c_raf,mek)@c1.B_Raf(mek,rap1,ras_gtp!76)@c1 -> B_Raf(mek,rap1,ras_gtp)@c1 + Ras_GTP(Ras_GDP~Ras_GDP,b_raf,c_raf,mek)@c1 fRate119() #Modifiers(pDok_RasGAP)
	J139: Rap1(_gdp~0,_gtp~_GTP,b_raf!79)@c1.B_Raf(mek,rap1!79,ras_gtp)@c1 -> B_Raf(mek,rap1,ras_gtp)@c1 + Rap1(_gdp~_GDP,_gtp~0,b_raf)@c1 fRate120() #Modifiers(Rap1GAP)
	J140: Ras_GTP(Ras_GDP~0,b_raf,c_raf!75,mek)@c1.c_Raf(ras_gtp!75)@c1 + MEK(b_raf,erk,p~0,p2~0,ras_gtp)@c1 <-> MEK(b_raf,erk,p~0,p2~0,ras_gtp!81)@c1.Ras_GTP(Ras_GDP~0,b_raf,c_raf!75,mek!81)@c1.c_Raf(ras_gtp!75)@c1 r122_J140_k1,r122_J140_k2
	J141: Ras_GTP(Ras_GDP~0,b_raf,c_raf!75,mek)@c1.c_Raf(ras_gtp!75)@c1 + MEK(b_raf,erk,p~P,p2~0,ras_gtp)@c1 <-> MEK(b_raf,erk,p~P,p2~0,ras_gtp!81)@c1.Ras_GTP(Ras_GDP~0,b_raf,c_raf!75,mek!81)@c1.c_Raf(ras_gtp!75)@c1 r123_J141_k1,r123_J141_k2
	J142: Ras_GTP(Ras_GDP~0,b_raf,c_raf!75,mek)@c1.c_Raf(ras_gtp!75)@c1 + MEK(b_raf,erk!32,p~0,p2~0,ras_gtp)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1 <-> MEK(b_raf,erk!32,p~0,p2~0,ras_gtp!81)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1.Ras_GTP(Ras_GDP~0,b_raf,c_raf!75,mek!81)@c1.c_Raf(ras_gtp!75)@c1 r124_J142_k1,r124_J142_k2
	J143: Ras_GTP(Ras_GDP~0,b_raf,c_raf!75,mek)@c1.c_Raf(ras_gtp!75)@c1 + MEK(b_raf,erk!32,p~P,p2~0,ras_gtp)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1 <-> MEK(b_raf,erk!32,p~P,p2~0,ras_gtp!81)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1.Ras_GTP(Ras_GDP~0,b_raf,c_raf!75,mek!81)@c1.c_Raf(ras_gtp!75)@c1 r125_J143_k1,r125_J143_k2
	J144: Ras_GTP(Ras_GDP~0,b_raf!76,c_raf,mek)@c1.B_Raf(mek,rap1,ras_gtp!76)@c1 + MEK(b_raf,erk,p~0,p2~0,ras_gtp)@c1 <-> MEK(b_raf!82,erk,p~0,p2~0,ras_gtp!81)@c1.Ras_GTP(Ras_GDP~0,b_raf!76,c_raf,mek!81)@c1.B_Raf(mek!82,rap1,ras_gtp!76)@c1 r126_J144_k1,r126_J144_k2
	J145: Ras_GTP(Ras_GDP~0,b_raf!76,c_raf,mek)@c1.B_Raf(mek,rap1,ras_gtp!76)@c1 + MEK(b_raf,erk,p~P,p2~0,ras_gtp)@c1 <-> MEK(b_raf!82,erk,p~P,p2~0,ras_gtp!81)@c1.Ras_GTP(Ras_GDP~0,b_raf!76,c_raf,mek!81)@c1.B_Raf(mek!82,rap1,ras_gtp!76)@c1 r127_J145_k1,r127_J145_k2
	J146: Ras_GTP(Ras_GDP~0,b_raf!76,c_raf,mek)@c1.B_Raf(mek,rap1,ras_gtp!76)@c1 + MEK(b_raf,erk!32,p~0,p2~0,ras_gtp)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1 <-> MEK(b_raf!82,erk!32,p~0,p2~0,ras_gtp!81)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1.Ras_GTP(Ras_GDP~0,b_raf!76,c_raf,mek!81)@c1.B_Raf(mek!82,rap1,ras_gtp!76)@c1 r128_J146_k1,r128_J146_k2
	J147: Ras_GTP(Ras_GDP~0,b_raf!76,c_raf,mek)@c1.B_Raf(mek,rap1,ras_gtp!76)@c1 + MEK(b_raf,erk!32,p~P,p2~0,ras_gtp)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1 <-> MEK(b_raf!82,erk!32,p~P,p2~0,ras_gtp!81)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1.Ras_GTP(Ras_GDP~0,b_raf!76,c_raf,mek!81)@c1.B_Raf(mek!82,rap1,ras_gtp!76)@c1 r129_J147_k1,r129_J147_k2
	J148: Rap1(_gdp~0,_gtp~_GTP,b_raf!79)@c1.B_Raf(mek,rap1!79,ras_gtp)@c1 + MEK(b_raf,erk,p~0,p2~0,ras_gtp)@c1 <-> MEK(b_raf!82,erk,p~0,p2~0,ras_gtp)@c1.Rap1(_gdp~0,_gtp~_GTP,b_raf!79)@c1.B_Raf(mek!82,rap1!79,ras_gtp)@c1 r130_J148_k1,r130_J148_k2
	J149: Rap1(_gdp~0,_gtp~_GTP,b_raf!79)@c1.B_Raf(mek,rap1!79,ras_gtp)@c1 + MEK(b_raf,erk,p~P,p2~0,ras_gtp)@c1 <-> MEK(b_raf!82,erk,p~P,p2~0,ras_gtp)@c1.Rap1(_gdp~0,_gtp~_GTP,b_raf!79)@c1.B_Raf(mek!82,rap1!79,ras_gtp)@c1 r131_J149_k1,r131_J149_k2
	J150: Rap1(_gdp~0,_gtp~_GTP,b_raf!79)@c1.B_Raf(mek,rap1!79,ras_gtp)@c1 + MEK(b_raf,erk!32,p~0,p2~0,ras_gtp)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1 <-> MEK(b_raf!82,erk!32,p~0,p2~0,ras_gtp)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1.Rap1(_gdp~0,_gtp~_GTP,b_raf!79)@c1.B_Raf(mek!82,rap1!79,ras_gtp)@c1 r132_J150_k1,r132_J150_k2
	J151: Rap1(_gdp~0,_gtp~_GTP,b_raf!79)@c1.B_Raf(mek,rap1!79,ras_gtp)@c1 + MEK(b_raf,erk!32,p~P,p2~0,ras_gtp)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1 <-> MEK(b_raf!82,erk!32,p~P,p2~0,ras_gtp)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1.Rap1(_gdp~0,_gtp~_GTP,b_raf!79)@c1.B_Raf(mek!82,rap1!79,ras_gtp)@c1 r133_J151_k1,r133_J151_k2
	J152: MEK(b_raf,erk,p~0,p2~0,ras_gtp!81)@c1.Ras_GTP(Ras_GDP~0,b_raf,c_raf!75,mek!81)@c1.c_Raf(ras_gtp!75)@c1 -> Ras_GTP(Ras_GDP~0,b_raf,c_raf!75,mek)@c1.c_Raf(ras_gtp!75)@c1 + MEK(b_raf,erk,p~P,p2~0,ras_gtp)@c1 r134_J152_k
	J153: MEK(b_raf,erk,p~P,p2~0,ras_gtp!81)@c1.Ras_GTP(Ras_GDP~0,b_raf,c_raf!75,mek!81)@c1.c_Raf(ras_gtp!75)@c1 -> Ras_GTP(Ras_GDP~0,b_raf,c_raf!75,mek)@c1.c_Raf(ras_gtp!75)@c1 + MEK(b_raf,erk,p~P,p2~P,ras_gtp)@c1 r135_J153_k
	J154: MEK(b_raf,erk!32,p~0,p2~0,ras_gtp!81)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1.Ras_GTP(Ras_GDP~0,b_raf,c_raf!75,mek!81)@c1.c_Raf(ras_gtp!75)@c1 -> Ras_GTP(Ras_GDP~0,b_raf,c_raf!75,mek)@c1.c_Raf(ras_gtp!75)@c1 + MEK(b_raf,erk!32,p~P,p2~0,ras_gtp)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1 r136_J154_k
	J155: MEK(b_raf,erk!32,p~P,p2~0,ras_gtp!81)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1.Ras_GTP(Ras_GDP~0,b_raf,c_raf!75,mek!81)@c1.c_Raf(ras_gtp!75)@c1 -> Ras_GTP(Ras_GDP~0,b_raf,c_raf!75,mek)@c1.c_Raf(ras_gtp!75)@c1 + MEK(b_raf,erk!32,p~P,p2~P,ras_gtp)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1 r137_J155_k
	J156: MEK(b_raf!82,erk,p~0,p2~0,ras_gtp!81)@c1.Ras_GTP(Ras_GDP~0,b_raf!76,c_raf,mek!81)@c1.B_Raf(mek!82,rap1,ras_gtp!76)@c1 -> Ras_GTP(Ras_GDP~0,b_raf!76,c_raf,mek)@c1.B_Raf(mek,rap1,ras_gtp!76)@c1 + MEK(b_raf,erk,p~P,p2~0,ras_gtp)@c1 r138_J156_k
	J157: MEK(b_raf!82,erk,p~P,p2~0,ras_gtp!81)@c1.Ras_GTP(Ras_GDP~0,b_raf!76,c_raf,mek!81)@c1.B_Raf(mek!82,rap1,ras_gtp!76)@c1 -> Ras_GTP(Ras_GDP~0,b_raf!76,c_raf,mek)@c1.B_Raf(mek,rap1,ras_gtp!76)@c1 + MEK(b_raf,erk,p~P,p2~P,ras_gtp)@c1 r139_J157_k
	J158: MEK(b_raf!82,erk!32,p~0,p2~0,ras_gtp!81)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1.Ras_GTP(Ras_GDP~0,b_raf!76,c_raf,mek!81)@c1.B_Raf(mek!82,rap1,ras_gtp!76)@c1 -> Ras_GTP(Ras_GDP~0,b_raf!76,c_raf,mek)@c1.B_Raf(mek,rap1,ras_gtp!76)@c1 + MEK(b_raf,erk!32,p~P,p2~0,ras_gtp)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1 r140_J158_k
	J159: MEK(b_raf!82,erk!32,p~P,p2~0,ras_gtp!81)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1.Ras_GTP(Ras_GDP~0,b_raf!76,c_raf,mek!81)@c1.B_Raf(mek!82,rap1,ras_gtp!76)@c1 -> Ras_GTP(Ras_GDP~0,b_raf!76,c_raf,mek)@c1.B_Raf(mek,rap1,ras_gtp!76)@c1 + MEK(b_raf,erk!32,p~P,p2~P,ras_gtp)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1 r141_J159_k
	J160: MEK(b_raf!82,erk,p~0,p2~0,ras_gtp)@c1.Rap1(_gdp~0,_gtp~_GTP,b_raf!79)@c1.B_Raf(mek!82,rap1!79,ras_gtp)@c1 -> Rap1(_gdp~0,_gtp~_GTP,b_raf!79)@c1.B_Raf(mek,rap1!79,ras_gtp)@c1 + MEK(b_raf,erk,p~P,p2~0,ras_gtp)@c1 r142_J160_k
	J161: MEK(b_raf!82,erk,p~P,p2~0,ras_gtp)@c1.Rap1(_gdp~0,_gtp~_GTP,b_raf!79)@c1.B_Raf(mek!82,rap1!79,ras_gtp)@c1 -> Rap1(_gdp~0,_gtp~_GTP,b_raf!79)@c1.B_Raf(mek,rap1!79,ras_gtp)@c1 + MEK(b_raf,erk,p~P,p2~P,ras_gtp)@c1 r143_J161_k
	J162: MEK(b_raf!82,erk!32,p~0,p2~0,ras_gtp)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1.Rap1(_gdp~0,_gtp~_GTP,b_raf!79)@c1.B_Raf(mek!82,rap1!79,ras_gtp)@c1 -> Rap1(_gdp~0,_gtp~_GTP,b_raf!79)@c1.B_Raf(mek,rap1!79,ras_gtp)@c1 + MEK(b_raf,erk!32,p~P,p2~0,ras_gtp)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1 r144_J162_k
	J163: MEK(b_raf!82,erk!32,p~P,p2~0,ras_gtp)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1.Rap1(_gdp~0,_gtp~_GTP,b_raf!79)@c1.B_Raf(mek!82,rap1!79,ras_gtp)@c1 -> Rap1(_gdp~0,_gtp~_GTP,b_raf!79)@c1.B_Raf(mek,rap1!79,ras_gtp)@c1 + MEK(b_raf,erk!32,p~P,p2~P,ras_gtp)@c1.ERK(erk,mek!32,mkp3,pp~0)@c1 r145_J163_k
	J164: Crk_C3G_pFRS2_dpEGFR_c_Cbl_ubiq()@c1 -> c_Cbl(l_dpegfr,proteasome)@c1 + FRS2(l_dpegfr,p~P,ptrka)@c1 + Crk(c3g!69)@c1.C3G(crk!69)@c1 r146_J164_k
	J165: MKP3(erk)@c1 + ERK(erk!80,mek,mkp3,pp~PP)@c1.ERK(erk!80,mek,mkp3,pp~PP)@c1 <-> ERK(erk!80,mek,mkp3!39,pp~PP)@c1.ERK(erk!80,mek,mkp3,pp~PP)@c1.MKP3(erk!39)@c1 r147_J165_k1,r147_J165_k2
	J166: MKP3(erk)@c1 + ERK(erk,mek,mkp3,pp~PP)@c1 <-> ERK(erk,mek,mkp3!39,pp~PP)@c1.MKP3(erk!39)@c1 r148_J166_k1,r148_J166_k2
	J167: ERK(erk,mek,mkp3!39,pp~PP)@c1.MKP3(erk!39)@c1 -> ERK(erk,mek,mkp3,pp~0)@c1 + MKP3(erk)@c1 r149_J167_k
	J168: ERK(erk!80,mek,mkp3!39,pp~PP)@c1.ERK(erk!80,mek,mkp3,pp~PP)@c1.MKP3(erk!39)@c1 -> ERK(erk,mek,mkp3,pp~PP)@c1 + ERK(erk,mek,mkp3,pp~0)@c1 + MKP3(erk)@c1 r150_J168_k
end reaction rules
end model
