###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000051', 'http://identifiers.org/biomodels.db/MODEL6624119661']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/17590932']
#@BQB_HAS_PART:['http://identifiers.org/kegg.pathway/map00010', 'http://identifiers.org/go/GO:0009401', 'http://identifiers.org/go/GO:0006098', 'http://identifiers.org/go/GO:0006096', 'http://identifiers.org/kegg.pathway/map00030']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/562']
#@creatorEmail:'jls@sun.ac.za'
#@creatorName:'Snoep Jacky L'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 18 molecules and 48 reactions. The translated model has 17 molecules and 52 rules'
###
begin model
begin parameters
	r1_rmaxPTS 7829.780000
	r1_KPTSa1 3082.300000
	r1_KPTSa2 0.010000
	r1_KPTSa3 245.300000
	r1_nPTSg6p 3.660000
	r1_KPTSg6p 2.150000
	r2_rmaxPGI 650.987869
	r2_KPGIeq 0.172500
	r2_KPGIg6p 2.900000
	r2_KPGIf6p 0.266000
	r2_KPGIf6ppginh 0.200000
	r2_KPGIg6ppginh 0.200000
	r3_rmaxPGM 0.839824
	r3_KPGMeq 0.196000
	r3_KPGMg6p 1.038000
	r3_KPGMg1p 0.013600
	r4_rmaxG6PDH 1.380197
	r4_KG6PDHg6p 14.400000
	r4_KG6PDHnadphg6pinh 6.430000
	r4_KG6PDHnadp 0.024600
	r4_KG6PDHnadphnadpinh 0.010000
	r5_rmaxPFK 1840.584747
	r5_KPFKatps 0.123000
	r5_KPFKadpc 4.140000
	r5_KPFKf6ps 0.325000
	r5_KPFKpep 3.260000
	r5_KPFKadpb 3.890000
	r5_KPFKampb 3.200000
	r5_KPFKadpa 128.000000
	r5_KPFKampa 19.100000
	r5_LPFK 5629067.000000
	r5_nPFK 11.100000
	r6_rmaxTA 10.871641
	r6_KTAeq 1.050000
	r7_rmaxTKa 9.473385
	r7_KTKaeq 1.200000
	r8_rmaxTKb 86.558559
	r8_KTKbeq 10.000000
	r9_rmaxMurSynth 0.000437
	r10_rmaxALDO 17.414644
	r10_kALDOeq 0.144000
	r10_kALDOfdp 1.750000
	r10_kALDOgap 0.088000
	r10_VALDOblf 2.000000
	r10_kALDOdhap 0.088000
	r10_kALDOgapinh 0.600000
	r11_rmaxGAPDH 921.594286
	r11_KGAPDHeq 0.630000
	r11_KGAPDHgap 0.683000
	r11_KGAPDHpgp 0.000010
	r11_KGAPDHnad 0.252000
	r11_KGAPDHnadh 1.090000
	r12_rmaxTIS 68.674744
	r12_kTISeq 1.390000
	r12_kTISdhap 2.800000
	r12_kTISgap 0.300000
	r13_rmaxTrpSynth 0.001037
	r14_rmaxG3PDH 0.011620
	r14_KG3PDHdhap 1.000000
	r15_rmaxPGK 3021.773771
	r15_KPGKeq 1934.400000
	r15_KPGKadp 0.185000
	r15_KPGKatp 0.653000
	r15_KPGKpgp 0.046800
	r15_KPGKpg3 0.473000
	r16_rmaxSerSynth 0.025712
	r16_KSerSynthpg3 1.000000
	r17_rmaxPGluMu 89.049654
	r17_KPGluMueq 0.188000
	r17_KPGluMupg3 0.200000
	r17_KPGluMupg2 0.369000
	r18_rmaxENO 330.447615
	r18_KENOeq 6.730000
	r18_KENOpg2 0.100000
	r18_KENOpep 0.135000
	r19_rmaxPK 0.061132
	r19_KPKpep 0.310000
	r19_nPK 4.000000
	r19_LPK 1000.000000
	r19_KPKatp 22.500000
	r19_KPKfdp 0.190000
	r19_KPKamp 0.200000
	r19_KPKadp 0.260000
	r20_rmaxpepCxylase 0.107021
	r20_KpepCxylasefdp 0.700000
	r20_npepCxylasefdp 4.210000
	r20_KpepCxylasepep 4.070000
	r21_rmaxSynth1 0.019539
	r21_KSynth1pep 1.000000
	r22_rmaxSynth2 0.073619
	r22_KSynth2pyr 1.000000
	r23_rmaxDAHPS 0.107953
	r23_nDAHPSe4p 2.600000
	r23_nDAHPSpep 2.200000
	r23_KDAHPSe4p 0.035000
	r23_KDAHPSpep 0.005300
	r24_rmaxPDH 6.059531
	r24_nPDH 3.680000
	r24_KPDHpyr 1159.000000
	r25_rmaxMetSynth 0.002263
	r26_rmaxPGDH 16.232360
	r26_KPGDHpg 37.500000
	r26_KPGDHnadp 0.050600
	r26_KPGDHnadphinh 0.013800
	r26_KPGDHatpinh 208.000000
	r27_rmaxR5PI 4.838412
	r27_KR5PIeq 4.000000
	r28_rmaxRu5P 6.739029
	r28_KRu5Peq 1.400000
	r29_rmaxRPPK 0.012900
	r29_KRPPKrib5p 0.100000
	r30_rmaxG1PAT 0.007525
	r30_KG1PATfdp 0.119000
	r30_nG1PATfdp 1.200000
	r30_KG1PATatp 4.420000
	r30_KG1PATg1p 3.200000
	r31_mu 0.000028
	r32_mu 0.000028
	r33_mu 0.000028
	r34_mu 0.000028
	r35_mu 0.000028
	r36_mu 0.000028
	r37_mu 0.000028
	r38_mu 0.000028
	r39_mu 0.000028
	r40_mu 0.000028
	r41_mu 0.000028
	r42_mu 0.000028
	r43_mu 0.000028
	r44_mu 0.000028
	r45_mu 0.000028
	r46_mu 0.000028
	r47_mu 0.000028
	r48_Dil 0.000028
	r48_cfeed 110.960000
end parameters
begin compartments
	#volume units: L
	extracellular 3 1.0
	cytosol 3 1.0
end compartments
begin molecule types
	#^ bqbiol:is chebi:CHEBI:15361, kegg.compound:C00022
	Pyruvate()
	#^ bqbiol:is chebi:CHEBI:16108, kegg.compound:C00111
	Dihydroxyacetonephosphate(glyceraldehyde_3_phosphate)
	#^ bqbiol:is chebi:CHEBI:48153, kegg.compound:C00279
	Erythrose_4_phosphate()
	#^ bqbiol:is chebi:CHEBI:16863, kegg.compound:C00345
	s6_Phosphogluconate()
	#^ bqbiol:is kegg.compound:C05345, chebi:CHEBI:16084
	#^ bqbiol:isVersionOf kegg.compound:C00085, chebi:CHEBI:15946, chebi:CHEBI:15946
	Fructose_6_Phosphate()
	#^ bqbiol:is chebi:CHEBI:16077, kegg.compound:C00103
	Glucose_1_Phosphate()
	#^ bqbiol:is chebi:CHEBI:17138, kegg.compound:C00661
	Glyceraldehyde_3_Phosphate(dihydroxyacetonephosphate)
	#^ bqbiol:is chebi:CHEBI:17797, kegg.compound:C00117
	Ribose_5_phosphate()
	#^ bqbiol:is chebi:CHEBI:16332, kegg.compound:C00231
	Xylulose_5_phosphate()
	#^ bqbiol:is chebi:CHEBI:17363, kegg.compound:C00199
	Ribulose_5_phosphate()
	#^ bqbiol:is chebi:CHEBI:17835, kegg.compound:C00631
	s2_Phosphoglycerate()
	#^ bqbiol:is chebi:CHEBI:16001, kegg.compound:C00236
	s1_3_diphosphosphoglycerate()
	#^ bqbiol:is chebi:CHEBI:18021, kegg.compound:C00074
	Phosphoenolpyruvate()
	#^ bqbiol:is chebi:CHEBI:17794, kegg.compound:C00197
	s3_Phosphoglycerate()
	#^ bqbiol:is chebi:CHEBI:17665, kegg.compound:C00668
	Glucose_6_Phosphate()
	#^ bqbiol:is chebi:CHEBI:4167, kegg.compound:C00031, chebi:CHEBI:4167
	#^ bqbiol:isVersionOf chebi:CHEBI:17234, kegg.compound:C00293
	ExtracellularGlucose()
	#^ bqbiol:is chebi:CHEBI:15721, kegg.compound:C00281
	sedoheptulose_7_phosphate()
end molecule types
begin seed species
	@cytosol:Phosphoenolpyruvate()@cytosol 1.6078740000000002e+21 # (2.67 * 0.001)mol/L * 6.022e23/mol *1.0L #Phosphoenolpyruvate #cpep
	@extracellular:ExtracellularGlucose()@extracellular 1.2044e+21 #original 2.0millimole/L #ExtracellularGlucose #cglcex
	@cytosol:Glucose_6_Phosphate()@cytosol 2.095656e+21 #original 3.48millimole/L #Glucose_6_Phosphate #cg6p
	@cytosol:Pyruvate()@cytosol 1.6078740000000002e+21 #original 2.67millimole/L #Pyruvate #cpyr
	@cytosol:Fructose_6_Phosphate()@cytosol 3.6132e+20 #original 0.6millimole/L #Fructose_6_Phosphate #cf6p
	@cytosol:Glucose_1_Phosphate()@cytosol 3.932366e+20 #original 0.653millimole/L #Glucose_1_Phosphate #cg1p
	@cytosol:s6_Phosphogluconate()@cytosol 4.865776e+20 #original 0.808millimole/L #s6_Phosphogluconate #cpg
	@cytosol:Glyceraldehyde_3_Phosphate(dihydroxyacetonephosphate!83)@cytosol.Dihydroxyacetonephosphate(glyceraldehyde_3_phosphate!83)@cytosol 1.6379840000000003e+20 #original 0.272millimole/L #Fructose_1_6_bisphosphate #cfdp
	@cytosol:sedoheptulose_7_phosphate()@cytosol 1.6620720000000003e+20 #original 0.276millimole/L #sedoheptulose_7_phosphate #csed7p
	@cytosol:Glyceraldehyde_3_Phosphate(dihydroxyacetonephosphate)@cytosol 1.3127960000000002e+20 #original 0.218millimole/L #Glyceraldehyde_3_Phosphate #cgap
	@cytosol:Erythrose_4_phosphate()@cytosol 5.901560000000001e+19 #original 0.098millimole/L #Erythrose_4_phosphate #ce4p
	@cytosol:Xylulose_5_phosphate()@cytosol 8.310360000000002e+19 #original 0.138millimole/L #Xylulose_5_phosphate #cxyl5p
	@cytosol:Ribose_5_phosphate()@cytosol 2.3967560000000003e+20 #original 0.398millimole/L #Ribose_5_phosphate #crib5p
	@cytosol:Dihydroxyacetonephosphate(glyceraldehyde_3_phosphate)@cytosol 1.0056740000000002e+20 #original 0.167millimole/L #Dihydroxyacetonephosphate #cdhap
	@cytosol:s1_3_diphosphosphoglycerate()@cytosol 4.8176e+18 #original 0.008millimole/L #s1_3_diphosphosphoglycerate #cpgp
	@cytosol:s3_Phosphoglycerate()@cytosol 1.282686e+21 #original 2.13millimole/L #s3_Phosphoglycerate #cpg3
	@cytosol:s2_Phosphoglycerate()@cytosol 2.4027780000000003e+20 #original 0.399millimole/L #s2_Phosphoglycerate #cpg2
	@cytosol:Ribulose_5_phosphate()@cytosol 6.68442e+19 #original 0.111millimole/L #Ribulose_5_phosphate #cribu5p
end seed species
begin observables
	Species Phosphoenolpyruvate_cytosol @cytosol:Phosphoenolpyruvate()@cytosol #Phosphoenol pyruvate
	Species ExtracellularGlucose_extracellular @extracellular:ExtracellularGlucose()@extracellular #Extracellular Glucose
	Species Glucose_6_Phosphate_cytosol @cytosol:Glucose_6_Phosphate()@cytosol #Glucose-6-Phosphate
	Species Pyruvate_cytosol @cytosol:Pyruvate()@cytosol #Pyruvate
	Species Fructose_6_Phosphate_cytosol @cytosol:Fructose_6_Phosphate()@cytosol #Fructose-6-Phosphate
	Species Glucose_1_Phosphate_cytosol @cytosol:Glucose_1_Phosphate()@cytosol #Glucose-1-Phosphate
	Species s6_Phosphogluconate_cytosol @cytosol:s6_Phosphogluconate()@cytosol #6-Phosphogluconate
	Species Fructose_1_6_bisphosphate_cytosol @cytosol:Glyceraldehyde_3_Phosphate(dihydroxyacetonephosphate!83)@cytosol.Dihydroxyacetonephosphate(glyceraldehyde_3_phosphate!83)@cytosol #Fructose-1,6-bisphosphate
	Species sedoheptulose_7_phosphate_cytosol @cytosol:sedoheptulose_7_phosphate()@cytosol #sedoheptulose-7-phosphate
	Species Glyceraldehyde_3_Phosphate_cytosol @cytosol:Glyceraldehyde_3_Phosphate(dihydroxyacetonephosphate)@cytosol #Glyceraldehyde-3-Phosphate
	Species Erythrose_4_phosphate_cytosol @cytosol:Erythrose_4_phosphate()@cytosol #Erythrose-4-phosphate
	Species Xylulose_5_phosphate_cytosol @cytosol:Xylulose_5_phosphate()@cytosol #Xylulose-5-phosphate
	Species Ribose_5_phosphate_cytosol @cytosol:Ribose_5_phosphate()@cytosol #Ribose-5-phosphate
	Species Dihydroxyacetonephosphate_cytosol @cytosol:Dihydroxyacetonephosphate(glyceraldehyde_3_phosphate)@cytosol #Dihydroxyacetonephosphate
	Species s1_3_diphosphosphoglycerate_cytosol @cytosol:s1_3_diphosphosphoglycerate()@cytosol #1,3-diphosphosphoglycerate
	Species s3_Phosphoglycerate_cytosol @cytosol:s3_Phosphoglycerate()@cytosol #3-Phosphoglycerate
	Species s2_Phosphoglycerate_cytosol @cytosol:s2_Phosphoglycerate()@cytosol #2-Phosphoglycerate
	Species Ribulose_5_phosphate_cytosol @cytosol:Ribulose_5_phosphate()@cytosol #Ribulose-5-phosphate
end observables
begin functions
	cnad() = 1.314*2.73^(-0.0435*time() - 0.342) - 2.73^(-0.0218*time() - 0.171)*(time() + 7.871)/(time() + 8.481) + 1.314
	cnadh() = 0.0934 + 0.00111*2.371^(-0.123*time())*(0.104*time()^3 + 0.844*time())
	cnadp() = 0.159 - 0.00554*time()/(0.01*time()^2 - 0.271*time() + 2.8) + 0.182/(0.526*time() + 4.82)
	cnadph() = 0.062 + 0.332*2.718^(-0.464*time())*(1.362e-13*time()^11 + 0.0166*time()^1.58 + 0.000166*time()^4.73 + 1.312e-10*time()^7.89 + 1.233e-16*time()^14.2)
	camp() = 0.123 + 7.25*time()/(0.17*time()^2 + 1.47*time() + 7.25) + 1.073/(8.05*time() + 1.29)
	cadp() = 0.582 + 1.73*2.731^(-0.15*time())*(0.000214*time()^3 + 0.12*time())
	catp() = 4.27 - 4.163*time()/(0.0364*time()^2 + 1.43*time() + 0.657)
	fRate0() = 7829.78*ExtracellularGlucose_extracellular*Phosphoenolpyruvate_cytosol/(Pyruvate_cytosol*(0.465116279069767*Glucose_6_Phosphate_cytosol^3.66 + 1)*(ExtracellularGlucose_extracellular*Phosphoenolpyruvate_cytosol/Pyruvate_cytosol + 245.3*ExtracellularGlucose_extracellular + 0.01*Phosphoenolpyruvate_cytosol/Pyruvate_cytosol + 3082.3))
	fRate1() = 650.9878687/(2.9*Fructose_6_Phosphate_cytosol/(1.33*s6_Phosphogluconate_cytosol + 0.266) + Glucose_6_Phosphate_cytosol + 14.5*s6_Phosphogluconate_cytosol + 2.9)
	fRate1m() = (34.63255461484*s6_Phosphogluconate_cytosol + 6.926510922968)/(0.02001*Fructose_6_Phosphate_cytosol + 0.1330665*s6_Phosphogluconate_cytosol*(s6_Phosphogluconate_cytosol + 0.2) + 0.1725*(Glucose_6_Phosphate_cytosol + 2.9)*(0.0532*s6_Phosphogluconate_cytosol + 0.01064))
	fRate2() = 0.01142161017128/(1.038*Glucose_1_Phosphate_cytosol + 0.0136*Glucose_6_Phosphate_cytosol + 0.0141168)
	fRate2m() = 0.01142161017128/(0.203448*Glucose_1_Phosphate_cytosol + 0.0026656*Glucose_6_Phosphate_cytosol + 0.0027668928)
	fRate3() = 0.0887466642065*cnadp/(0.0643*Glucose_6_Phosphate_cytosol*cnadp + 0.00158178*Glucose_6_Phosphate_cytosol + 0.92592*cnadp + 0.0246*cnadph^2*(Glucose_6_Phosphate_cytosol + 14.4) + 0.158178*cnadph*(Glucose_6_Phosphate_cytosol + 14.4) + 0.01*cnadph*(Glucose_6_Phosphate_cytosol*cnadp + 0.0246*Glucose_6_Phosphate_cytosol + 14.4*cnadp + 0.35424) + 0.022777632)
	fRate4() = 1848247014360.5*catp*((775.087168*Fructose_6_Phosphate_cytosol*cadp + 5194.30144*Fructose_6_Phosphate_cytosol*camp + 99211.157504*Fructose_6_Phosphate_cytosol + 9890.68288*Phosphoenolpyruvate_cytosol + 8288.84992*cadp + 10076.133184*camp + 32243.6261888)/(9890.68288*Phosphoenolpyruvate_cytosol + 8288.84992*cadp + 10076.133184*camp + 32243.6261888))^11.1*(0.0078125*cadp + 0.0523560209424084*camp + 1)^2/(4.99139904*Fructose_6_Phosphate_cytosol*cadp*((775.087168*Fructose_6_Phosphate_cytosol*cadp + 5194.30144*Fructose_6_Phosphate_cytosol*camp + 99211.157504*Fructose_6_Phosphate_cytosol + 9890.68288*Phosphoenolpyruvate_cytosol + 8288.84992*cadp + 10076.133184*camp + 32243.6261888)/(9890.68288*Phosphoenolpyruvate_cytosol + 8288.84992*cadp + 10076.133184*camp + 32243.6261888))^11.1*(5977047.04*(0.0078125*cadp + 0.0523560209424084*camp + 1)^2) + 28096919.6198957*Fructose_6_Phosphate_cytosol*cadp*(5977047.04*(0.0078125*cadp + 0.0523560209424084*camp + 1)^2) + 168.0031872*Fructose_6_Phosphate_cytosol*((775.087168*Fructose_6_Phosphate_cytosol*cadp + 5194.30144*Fructose_6_Phosphate_cytosol*camp + 99211.157504*Fructose_6_Phosphate_cytosol + 9890.68288*Phosphoenolpyruvate_cytosol + 8288.84992*cadp + 10076.133184*camp + 32243.6261888)/(9890.68288*Phosphoenolpyruvate_cytosol + 8288.84992*cadp + 10076.133184*camp + 32243.6261888))^11.1*(catp + 0.123)*(5977047.04*(0.0078125*cadp + 0.0523560209424084*camp + 1)^2) + 945701196.962342*Fructose_6_Phosphate_cytosol*(catp + 0.123)*(5977047.04*(0.0078125*cadp + 0.0523560209424084*camp + 1)^2) + 1216.55399424*Phosphoenolpyruvate_cytosol*cadp*((775.087168*Fructose_6_Phosphate_cytosol*cadp + 5194.30144*Fructose_6_Phosphate_cytosol*camp + 99211.157504*Fructose_6_Phosphate_cytosol + 9890.68288*Phosphoenolpyruvate_cytosol + 8288.84992*cadp + 10076.133184*camp + 32243.6261888)/(9890.68288*Phosphoenolpyruvate_cytosol + 8288.84992*cadp + 10076.133184*camp + 32243.6261888))^11.1*(19.1*cadp + 128.0*camp + 2444.8) + 6848063942.69458*Phosphoenolpyruvate_cytosol*cadp*(19.1*cadp + 128.0*camp + 2444.8) + 40947.4271232*Phosphoenolpyruvate_cytosol*((775.087168*Fructose_6_Phosphate_cytosol*cadp + 5194.30144*Fructose_6_Phosphate_cytosol*camp + 99211.157504*Fructose_6_Phosphate_cytosol + 9890.68288*Phosphoenolpyruvate_cytosol + 8288.84992*cadp + 10076.133184*camp + 32243.6261888)/(9890.68288*Phosphoenolpyruvate_cytosol + 8288.84992*cadp + 10076.133184*camp + 32243.6261888))^11.1*(catp + 0.123)*(19.1*cadp + 128.0*camp + 2444.8) + 230495810754.11*Phosphoenolpyruvate_cytosol*(catp + 0.123)*(19.1*cadp + 128.0*camp + 2444.8) + 1019.52854016*cadp^2*((775.087168*Fructose_6_Phosphate_cytosol*cadp + 5194.30144*Fructose_6_Phosphate_cytosol*camp + 99211.157504*Fructose_6_Phosphate_cytosol + 9890.68288*Phosphoenolpyruvate_cytosol + 8288.84992*cadp + 10076.133184*camp + 32243.6261888)/(9890.68288*Phosphoenolpyruvate_cytosol + 8288.84992*cadp + 10076.133184*camp + 32243.6261888))^11.1*(19.1*cadp + 128.0*camp + 2444.8) + 5738994460.97283*cadp^2*(19.1*cadp + 128.0*camp + 2444.8) + 1239.364381632*cadp*camp*((775.087168*Fructose_6_Phosphate_cytosol*cadp + 5194.30144*Fructose_6_Phosphate_cytosol*camp + 99211.157504*Fructose_6_Phosphate_cytosol + 9890.68288*Phosphoenolpyruvate_cytosol + 8288.84992*cadp + 10076.133184*camp + 32243.6261888)/(9890.68288*Phosphoenolpyruvate_cytosol + 8288.84992*cadp + 10076.133184*camp + 32243.6261888))^11.1*(19.1*cadp + 128.0*camp + 2444.8) + 6976465141.6201*cadp*camp*(19.1*cadp + 128.0*camp + 2444.8) + 34315.8386688*cadp*((775.087168*Fructose_6_Phosphate_cytosol*cadp + 5194.30144*Fructose_6_Phosphate_cytosol*camp + 99211.157504*Fructose_6_Phosphate_cytosol + 9890.68288*Phosphoenolpyruvate_cytosol + 8288.84992*cadp + 10076.133184*camp + 32243.6261888)/(9890.68288*Phosphoenolpyruvate_cytosol + 8288.84992*cadp + 10076.133184*camp + 32243.6261888))^11.1*(catp + 0.123)*(19.1*cadp + 128.0*camp + 2444.8) + 3965.9660212224*cadp*((775.087168*Fructose_6_Phosphate_cytosol*cadp + 5194.30144*Fructose_6_Phosphate_cytosol*camp + 99211.157504*Fructose_6_Phosphate_cytosol + 9890.68288*Phosphoenolpyruvate_cytosol + 8288.84992*cadp + 10076.133184*camp + 32243.6261888)/(9890.68288*Phosphoenolpyruvate_cytosol + 8288.84992*cadp + 10076.133184*camp + 32243.6261888))^11.1*(19.1*cadp + 128.0*camp + 2444.8) + 193166155027.866*cadp*(catp + 0.123)*(19.1*cadp + 128.0*camp + 2444.8) + 22324688453.1843*cadp*(19.1*cadp + 128.0*camp + 2444.8) + 41715.19138176*camp*((775.087168*Fructose_6_Phosphate_cytosol*cadp + 5194.30144*Fructose_6_Phosphate_cytosol*camp + 99211.157504*Fructose_6_Phosphate_cytosol + 9890.68288*Phosphoenolpyruvate_cytosol + 8288.84992*cadp + 10076.133184*camp + 32243.6261888)/(9890.68288*Phosphoenolpyruvate_cytosol + 8288.84992*cadp + 10076.133184*camp + 32243.6261888))^11.1*(catp + 0.123)*(19.1*cadp + 128.0*camp + 2444.8) + 234817607205.75*camp*(catp + 0.123)*(19.1*cadp + 128.0*camp + 2444.8) + 133488.612421632*((775.087168*Fructose_6_Phosphate_cytosol*cadp + 5194.30144*Fructose_6_Phosphate_cytosol*camp + 99211.157504*Fructose_6_Phosphate_cytosol + 9890.68288*Phosphoenolpyruvate_cytosol + 8288.84992*cadp + 10076.133184*camp + 32243.6261888)/(9890.68288*Phosphoenolpyruvate_cytosol + 8288.84992*cadp + 10076.133184*camp + 32243.6261888))^11.1*(catp + 0.123)*(19.1*cadp + 128.0*camp + 2444.8) + (751416343058.399*catp + 92424210196.183)*(19.1*cadp + 128.0*camp + 2444.8))
	fRate5m() = 10.3539438857143
	fRate6m() = 7.89448731916667
	fRate7m() = 8.655855855
	fRate8() = 0.00043711
	fRate9() = 3.0092505264/(0.6*Dihydroxyacetonephosphate_cytosol*Glyceraldehyde_3_Phosphate_cytosol + 0.0528*Dihydroxyacetonephosphate_cytosol + 0.288*Fructose_1_6_bisphosphate_cytosol*Glyceraldehyde_3_Phosphate_cytosol + 0.1728*Fructose_1_6_bisphosphate_cytosol + 0.0528*Glyceraldehyde_3_Phosphate_cytosol + 0.3024)
	fRate9m() = 20.8975731/(0.6*Dihydroxyacetonephosphate_cytosol*Glyceraldehyde_3_Phosphate_cytosol + 0.0528*Dihydroxyacetonephosphate_cytosol + 0.288*Fructose_1_6_bisphosphate_cytosol*Glyceraldehyde_3_Phosphate_cytosol + 0.1728*Fructose_1_6_bisphosphate_cytosol + 0.0528*Glyceraldehyde_3_Phosphate_cytosol + 0.3024)
	fRate10() = 0.0104471928272296*cnad/(1.1336e-5*Glyceraldehyde_3_Phosphate_cytosol*cnad + 2.856672e-6*Glyceraldehyde_3_Phosphate_cytosol + 7.742488e-6*cnad + 0.172116*cnadh*s1_3_diphosphosphoglycerate_cytosol + 2.6208e-6*cnadh*(Glyceraldehyde_3_Phosphate_cytosol + 0.683) + 0.74447*s1_3_diphosphosphoglycerate_cytosol*(cnad + 0.252) + 1.951106976e-6)
	fRate10m() = 0.0104471928272296*cnadh/(7.14168e-6*Glyceraldehyde_3_Phosphate_cytosol*cnad + 1.79970336e-6*Glyceraldehyde_3_Phosphate_cytosol + 4.87776744e-6*cnad + 0.10843308*cnadh*s1_3_diphosphosphoglycerate_cytosol + 1.651104e-6*cnadh*(Glyceraldehyde_3_Phosphate_cytosol + 0.683) + 0.4690161*s1_3_diphosphosphoglycerate_cytosol*(cnad + 0.252) + 1.22919739488e-6)
	fRate11() = 20.602423176/(0.3*Dihydroxyacetonephosphate_cytosol + 2.8*Glyceraldehyde_3_Phosphate_cytosol + 0.84)
	fRate11m() = 20.602423176/(0.417*Dihydroxyacetonephosphate_cytosol + 3.892*Glyceraldehyde_3_Phosphate_cytosol + 1.1676)
	fRate13() = 0.01162042696/(Dihydroxyacetonephosphate_cytosol + 1.0)
	fRate14() = 933.332242874999*cadp/(0.308869*cadp*s1_3_diphosphosphoglycerate_cytosol + 0.0144550692*cadp + 0.008658*catp*s3_Phosphoglycerate_cytosol + 0.087505*catp*(s1_3_diphosphosphoglycerate_cytosol + 0.0468) + 0.057140765*s1_3_diphosphosphoglycerate_cytosol + 0.0305604*s3_Phosphoglycerate_cytosol*(cadp + 0.185) + 0.002674187802)
	fRate14m() = 933.332242874999*catp/(597.4761936*cadp*s1_3_diphosphosphoglycerate_cytosol + 27.96188586048*cadp + 16.7480352*catp*s3_Phosphoglycerate_cytosol + 169.269672*catp*(s1_3_diphosphosphoglycerate_cytosol + 0.0468) + 110.533095816*s1_3_diphosphosphoglycerate_cytosol + 59.11603776*s3_Phosphoglycerate_cytosol*(cadp + 0.185) + 5.1729488841888)
	fRate15() = 0.025712107/(s3_Phosphoglycerate_cytosol + 1.0)
	fRate16() = 32.85932235183/(0.2*s2_Phosphoglycerate_cytosol + 0.369*s3_Phosphoglycerate_cytosol + 0.0738)
	fRate16m() = 32.85932235183/(0.0376*s2_Phosphoglycerate_cytosol + 0.069372*s3_Phosphoglycerate_cytosol + 0.0138744)
	fRate17() = 44.6104280385/(0.1*Phosphoenolpyruvate_cytosol + 0.135*s2_Phosphoglycerate_cytosol + 0.0135)
	fRate17m() = 44.6104280385/(0.673*Phosphoenolpyruvate_cytosol + 0.90855*s2_Phosphoglycerate_cytosol + 0.090855)
	fRate18() = 6.61939494391573*cadp*(Phosphoenolpyruvate_cytosol + 0.31)^4.0/(108.28124103296*Phosphoenolpyruvate_cytosol*cadp*(Phosphoenolpyruvate_cytosol + 0.31)^4.0 + 1000.0*Phosphoenolpyruvate_cytosol*cadp*(catp/(118.421052631579*Fructose_1_6_bisphosphate_cytosol + 112.5*camp + 22.5) + 1/(5.26315789473684*Fructose_1_6_bisphosphate_cytosol + 5.0*camp + 1.0))^4.0 + 28.1531226685695*Phosphoenolpyruvate_cytosol*(Phosphoenolpyruvate_cytosol + 0.31)^4.0 + 260.0*Phosphoenolpyruvate_cytosol*(catp/(118.421052631579*Fructose_1_6_bisphosphate_cytosol + 112.5*camp + 22.5) + 1/(5.26315789473684*Fructose_1_6_bisphosphate_cytosol + 5.0*camp + 1.0))^4.0 + 33.5671847202175*cadp*(Phosphoenolpyruvate_cytosol + 0.31)^4.0 + 310.0*cadp*(catp/(118.421052631579*Fructose_1_6_bisphosphate_cytosol + 112.5*camp + 22.5) + 1/(5.26315789473684*Fructose_1_6_bisphosphate_cytosol + 5.0*camp + 1.0))^4.0 + 8.72746802725656*(Phosphoenolpyruvate_cytosol + 0.31)^4.0 + 80.6*(catp/(118.421052631579*Fructose_1_6_bisphosphate_cytosol + 112.5*camp + 22.5) + 1/(5.26315789473684*Fructose_1_6_bisphosphate_cytosol + 5.0*camp + 1.0))^4.0)
	fRate19() = 0.1070205858*Phosphoenolpyruvate_cytosol*(4.48887230854035*Fructose_1_6_bisphosphate_cytosol^4.21 + 1)/(Phosphoenolpyruvate_cytosol + 4.07)
	fRate20() = 0.01953897003/(Phosphoenolpyruvate_cytosol + 1.0)
	fRate21() = 0.07361855055/(Pyruvate_cytosol + 1.0)
	fRate22() = 0.1079531227*Erythrose_4_phosphate_cytosol^2.6*Phosphoenolpyruvate_cytosol^2.2/((Erythrose_4_phosphate_cytosol^2.6 + 0.035)*(Phosphoenolpyruvate_cytosol^2.2 + 0.0053))
	fRate23() = 6.059531017*Pyruvate_cytosol^3.68/(Pyruvate_cytosol^3.68 + 1159.0)
	fRate25() = 46.593365483808*cnadp/(0.0506*catp*cnadph*(s6_Phosphogluconate_cytosol + 37.5) + 0.00069828*catp*(s6_Phosphogluconate_cytosol + 37.5) + 2.8704*cnadp*s6_Phosphogluconate_cytosol + 107.64*cnadp + 10.5248*cnadph*(s6_Phosphogluconate_cytosol + 37.5) + 0.14524224*s6_Phosphogluconate_cytosol + 5.446584)
	fRate26m() = 1.2096029825
	fRate27m() = 4.81359248214286
	fRate28() = 0.01290045226/(Ribose_5_phosphate_cytosol + 0.1)
	fRate29() = 0.007525458026*Glucose_1_Phosphate_cytosol*catp*(12.8630407751077*Fructose_1_6_bisphosphate_cytosol^1.2 + 1)/((Glucose_1_Phosphate_cytosol + 3.2)*(catp + 4.42))
	fRate47() = 0.003084688
end functions
begin reaction rules
	vPTS_reactants_0: 0  -> ExtracellularGlucose()@extracellular -1*(fRate0())
	vPTS_reactants_1: 0  -> Phosphoenolpyruvate()@cytosol -1*65.0*(fRate0())
	vPTS_products_0: 0  -> Glucose_6_Phosphate()@cytosol 65.0*fRate0()
	vPTS_products_1: 0  -> Pyruvate()@cytosol 65.0*fRate0()
	vPGI: Glucose_6_Phosphate()@cytosol <-> Fructose_6_Phosphate()@cytosol fRate1(),fRate1m() #Modifiers(cpg)
	vPGM: Glucose_6_Phosphate()@cytosol <-> Glucose_1_Phosphate()@cytosol fRate2(),fRate2m()
	vG6PDH: Glucose_6_Phosphate()@cytosol -> s6_Phosphogluconate()@cytosol fRate3()
	vPFK: Fructose_6_Phosphate()@cytosol -> Glyceraldehyde_3_Phosphate(dihydroxyacetonephosphate!83)@cytosol.Dihydroxyacetonephosphate(glyceraldehyde_3_phosphate!83)@cytosol fRate4() #Modifiers(cpep)
	vTA: Glyceraldehyde_3_Phosphate(dihydroxyacetonephosphate)@cytosol + sedoheptulose_7_phosphate()@cytosol <-> Fructose_6_Phosphate()@cytosol + Erythrose_4_phosphate()@cytosol r6_rmaxTA,fRate5m()
	vTKA: Ribose_5_phosphate()@cytosol + Xylulose_5_phosphate()@cytosol <-> Glyceraldehyde_3_Phosphate(dihydroxyacetonephosphate)@cytosol + sedoheptulose_7_phosphate()@cytosol r7_rmaxTKa,fRate6m()
	vTKB: Erythrose_4_phosphate()@cytosol + Xylulose_5_phosphate()@cytosol <-> Glyceraldehyde_3_Phosphate(dihydroxyacetonephosphate)@cytosol + Fructose_6_Phosphate()@cytosol r8_rmaxTKb,fRate7m()
	vMURSyNTH_reactants_0: 0  -> Fructose_6_Phosphate()@cytosol -1*2.0*(fRate8())
	vALDO: Glyceraldehyde_3_Phosphate(dihydroxyacetonephosphate!83)@cytosol.Dihydroxyacetonephosphate(glyceraldehyde_3_phosphate!83)@cytosol <-> Dihydroxyacetonephosphate(glyceraldehyde_3_phosphate)@cytosol + Glyceraldehyde_3_Phosphate(dihydroxyacetonephosphate)@cytosol fRate9(),fRate9m()
	vGAPDH: Glyceraldehyde_3_Phosphate(dihydroxyacetonephosphate)@cytosol <-> s1_3_diphosphosphoglycerate()@cytosol fRate10(),fRate10m()
	vTIS: Dihydroxyacetonephosphate(glyceraldehyde_3_phosphate)@cytosol <-> Glyceraldehyde_3_Phosphate(dihydroxyacetonephosphate)@cytosol fRate11(),fRate11m()
	vTRPSYNTH: 0  -> Pyruvate()@cytosol + Glyceraldehyde_3_Phosphate(dihydroxyacetonephosphate)@cytosol r13_rmaxTrpSynth
	vG3PDH: Dihydroxyacetonephosphate(glyceraldehyde_3_phosphate)@cytosol -> 0  fRate13()
	vPGK: s1_3_diphosphosphoglycerate()@cytosol <-> s3_Phosphoglycerate()@cytosol fRate14(),fRate14m()
	vsersynth: s3_Phosphoglycerate()@cytosol -> 0  fRate15()
	vrpGluMu: s3_Phosphoglycerate()@cytosol <-> s2_Phosphoglycerate()@cytosol fRate16(),fRate16m()
	vENO: s2_Phosphoglycerate()@cytosol <-> Phosphoenolpyruvate()@cytosol fRate17(),fRate17m()
	vPK: Phosphoenolpyruvate()@cytosol -> Pyruvate()@cytosol fRate18() #Modifiers(cfdp)
	vpepCxylase_reactants_0: 0  -> Phosphoenolpyruvate()@cytosol -1*(fRate19()) #Modifiers(cfdp)
	vSynth1: Phosphoenolpyruvate()@cytosol -> 0  fRate20()
	vSynth2: Pyruvate()@cytosol -> 0  fRate21()
	vDAHPS_reactants_0: 0  -> Erythrose_4_phosphate()@cytosol -1*(fRate22())
	vDAHPS_reactants_1: 0  -> Phosphoenolpyruvate()@cytosol -1*(fRate22())
	vPDH_reactants_0: 0  -> Pyruvate()@cytosol -1*(fRate23())
	vMethSynth: 0  -> Pyruvate()@cytosol r25_rmaxMetSynth
	vPGDH: s6_Phosphogluconate()@cytosol -> Ribulose_5_phosphate()@cytosol fRate25()
	vR5PI: Ribulose_5_phosphate()@cytosol <-> Ribose_5_phosphate()@cytosol r27_rmaxR5PI,fRate26m()
	vRu5P: Ribulose_5_phosphate()@cytosol <-> Xylulose_5_phosphate()@cytosol r28_rmaxRu5P,fRate27m()
	vPPK: Ribose_5_phosphate()@cytosol -> 0  fRate28()
	vG1PAT_reactants_0: 0  -> Glucose_1_Phosphate()@cytosol -1*(fRate29()) #Modifiers(cfdp)
	vG6P: Glucose_6_Phosphate()@cytosol -> 0  r31_mu
	vf6P: Fructose_6_Phosphate()@cytosol -> 0  r32_mu
	vfdP: Glyceraldehyde_3_Phosphate(dihydroxyacetonephosphate!83)@cytosol.Dihydroxyacetonephosphate(glyceraldehyde_3_phosphate!83)@cytosol -> 0  r33_mu
	vGAP: Glyceraldehyde_3_Phosphate(dihydroxyacetonephosphate)@cytosol -> 0  r34_mu
	vDHAP: Dihydroxyacetonephosphate(glyceraldehyde_3_phosphate)@cytosol -> 0  r35_mu
	vPGP: s1_3_diphosphosphoglycerate()@cytosol -> 0  r36_mu
	vPG3: s3_Phosphoglycerate()@cytosol -> 0  r37_mu
	vpg2: s2_Phosphoglycerate()@cytosol -> 0  r38_mu
	vPEP: Phosphoenolpyruvate()@cytosol -> 0  r39_mu
	vRibu5p: Ribulose_5_phosphate()@cytosol -> 0  r40_mu
	vRIB5P: Ribose_5_phosphate()@cytosol -> 0  r41_mu
	vXYL5P: Xylulose_5_phosphate()@cytosol -> 0  r42_mu
	vSED7P: sedoheptulose_7_phosphate()@cytosol -> 0  r43_mu
	vpyr: Pyruvate()@cytosol -> 0  r44_mu
	vPG: s6_Phosphogluconate()@cytosol -> 0  r45_mu
	vE4P: Erythrose_4_phosphate()@cytosol -> 0  r46_mu
	vGLP: Glucose_1_Phosphate()@cytosol -> 0  r47_mu
	vEXTER: 0  <-> ExtracellularGlucose()@extracellular fRate47(),r48_Dil
end reaction rules
end model
