###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL6624131052', 'http://identifiers.org/biomodels.db/BIOMD0000000066']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/11368770']
#@BQB_HAS_PART:['http://identifiers.org/obo.go/GO:0009088', 'http://identifiers.org/obo.go/GO:0006531']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/83333']
#@BQB_IS_VERSION_OF:['http://identifiers.org/kegg.pathway/map00260']
#@creatorEmail:'jls@sun.ac.za'
#@creatorName:'Snoep Jacky L'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 11 molecules and 7 reactions. The translated model has 10 molecules and 15 rules'
###
begin model
begin parameters
	r1_vm11 0.150000
	r1_keqak 0.000640
	r1_k11 0.970000
	r1_k1thr 0.167000
	r1_nak1 4.090000
	r1_alpha 2.470000
	r1_k1aspp 0.017000
	r1_k1atp 0.980000
	r1_k1adp 0.250000
	r1_vm13 0.072200
	r1_lys 0.460000
	r1_k1lys 0.391000
	r1_nak3 2.800000
	r1_k13 0.320000
	r1_k13aspp 0.017000
	r1_k13atp 0.220000
	r1_k13adp 0.250000
	r2_vm2f 0.181200
	r2_k2eq 56.415033
	r2_k2aspp 0.022000
	r2_k2asa 0.110000
	r2_k2p 10.000000
	r2_k2nadph 0.029000
	r2_k2nadp 0.144000
	r3_vm3f 1.001000
	r3_k3eq 3162.277660
	r3_k3thr 0.097000
	r3_nhdh1 1.410000
	r3_alpha3 3.930000
	r3_k3asa 0.240000
	r3_k3hs 3.390000
	r3_k3nadph 0.037000
	r3_k3nadp 0.067000
	r4_vm5 0.043400
	r4_k5hsp 0.310000
	r5_vm4f 0.100000
	r5_lys 0.460000
	r5_k4lys 9.450000
	r5_k4atp 0.072000
	r5_k4ihs 4.700000
	r5_k4hs 0.110000
	r5_k4thr 1.090000
	r5_k4iatp 4.350000
	r6_knadph 0.000005
	r6_prot 202.000000
	r7_katpase 0.000041
	r7_prot 202.000000
end parameters
begin molecule types
	#^ bqbiol:is obo.chebi:CHEBI:15422, kegg.compound:C00002
	ATP()
	#^ bqbiol:is obo.chebi:CHEBI:17053, kegg.compound:C00049
	Aspartate()
	#^ bqbiol:is obo.chebi:CHEBI:18367, kegg.compound:C00009
	Phos(threonine)
	#^ bqbiol:is obo.chebi:CHEBI:16474, kegg.compound:C00005
	NADPH()
	#^ bqbiol:is obo.chebi:CHEBI:16761, kegg.compound:C00008
	ADP()
	#^ bqbiol:is obo.chebi:CHEBI:15836, kegg.compound:C03082
	Aspartylphosphate()
	#^ bqbiol:is obo.chebi:CHEBI:18051, kegg.compound:C00441
	Aspartatebeta_semialdehyde()
	#^ bqbiol:is obo.chebi:CHEBI:18009, kegg.compound:C00006
	NADP()
	#^ bqbiol:is obo.chebi:CHEBI:15699, kegg.compound:C00263
	Homoserine()
	#^ bqbiol:is obo.chebi:CHEBI:16857, kegg.compound:C00188
	Threonine(phos)
end molecule types
begin seed species
	Threonine(phos) 1.2044e+21 # (2.0 * 0.001)mol/L * 6.022e23/mol *1.0L #Threonine #thr
	Aspartate() 1.2044e+21 #original 2.0millimole/L  #Aspartate #asp
	NADPH() 1.2044e+21 #original 2.0millimole/L  #NADPH #nadph
	ATP() 6.022e+21 #original 10.0millimole/L  #ATP #atp
end seed species
begin observables
	Species Aspartylphosphate Aspartylphosphate() #Aspartyl phosphate
	Species Aspartatebeta_semialdehyde Aspartatebeta_semialdehyde() #Aspartate beta-semialdehyde
	Species Homoserine Homoserine() #Homoserine
	Species O_Phospho_homoserine Threonine(phos!99).Phos(threonine!99) #O-Phospho-homoserine
	Species Phos Phos(threonine) #Phos
	Species Threonine Threonine(phos) #Threonine
	Species Aspartate Aspartate() #Aspartate
	Species NADP NADP() #NADP
	Species NADPH NADPH() #NADPH
	Species ADP ADP() #ADP
	Species ATP ATP() #ATP
end observables
begin functions
	fRate0() = (-234.375*ADP*Aspartylphosphate + 0.15*ATP*Aspartate)/((3.92*ADP + ATP + 0.98)*(Aspartate + 57.0588235294118*Aspartylphosphate + (1465.08009273801*Threonine^4.09 + 0.97)/(37.4075352775276*Threonine^4.09 + 1))) + 0.388160043240973*(-112.8125*ADP*Aspartylphosphate + 0.0722*ATP*Aspartate)/((0.88*ADP + ATP + 0.22)*(Aspartate + 18.8235294117647*Aspartylphosphate + 0.32))
	fRate1() = 0.02870208/(0.000638*Aspartatebeta_semialdehyde*NADP*Phos + 0.00638*Aspartatebeta_semialdehyde*NADP + 0.003168*Aspartatebeta_semialdehyde*Phos*(NADPH + 0.029) + 0.03168*Aspartatebeta_semialdehyde*(NADPH + 0.029) + 0.1584*Aspartylphosphate*NADPH + 0.0045936*Aspartylphosphate + 7.018e-5*NADP*Phos + 0.0319*NADP*(Aspartylphosphate + 0.022) + 0.0034848*NADPH + 0.00034848*Phos*(NADPH + 0.029) + 0.0001010592)
	fRate1m() = 0.02870208/(0.0359927913458237*Aspartatebeta_semialdehyde*NADP*Phos + 0.359927913458237*Aspartatebeta_semialdehyde*NADP + 0.178722825993056*Aspartatebeta_semialdehyde*Phos*(NADPH + 0.029) + 1.78722825993056*Aspartatebeta_semialdehyde*(NADPH + 0.029) + 8.93614129965278*Aspartylphosphate*NADPH + 0.259148097689931*Aspartylphosphate + 0.00395920704804061*NADP*Phos + 1.79963956729118*NADP*(Aspartylphosphate + 0.022) + 0.196595108592361*NADPH + 0.0196595108592361*Phos*(NADPH + 0.029) + 0.00570125814917847)
	fRate2() = (3.89545649683303*Threonine^1.41 + 1)*(1.001*Aspartatebeta_semialdehyde*NADPH - 0.000316543993782855*Homoserine*NADP)/((26.8319264427001*Threonine^1.41 + 1)*(Aspartatebeta_semialdehyde + 0.0707964601769911*Homoserine + 0.24)*(0.552238805970149*NADP + NADPH + 0.037))
	fRate3() = 0.0434/(O_Phospho_homoserine + 0.31)
	fRate4() = 21.05937225/(0.0784872*ATP*Homoserine*Threonine + 220.930396548*ATP*Homoserine + 5.12347*ATP*Threonine*(ATP + 0.072) + 5.5845823*ATP*(ATP + 0.072) + 24.292933005*ATP + 0.34141932*Homoserine*Threonine + 3.38315508*Homoserine*(Homoserine + 0.11) + 15.900828876*Homoserine + 22.2870945*Threonine*(ATP + 0.072) + 1.74909117636)
	fRate5() = 0.0010908
	fRate6() = 0.008282
end functions
begin reaction rules
	vak_reactants_0: 0  -> ATP() -1*(fRate0()) #Modifiers(thr)
	vak_reactants_1: 0  -> Aspartate() -1*(fRate0()) #Modifiers(thr)
	vak_products_0: 0  -> Aspartylphosphate() fRate0() #Modifiers(thr)
	vak_products_1: 0  -> ADP() fRate0() #Modifiers(thr)
	vasd: NADPH() + Aspartylphosphate() <-> NADP() + Phos(threonine) + Aspartatebeta_semialdehyde() fRate1(),fRate1m()
	vhdh_reactants_0: 0  -> NADPH() -1*(fRate2()) #Modifiers(asp, thr)
	vhdh_reactants_1: 0  -> Aspartatebeta_semialdehyde() -1*(fRate2()) #Modifiers(asp, thr)
	vhdh_products_0: 0  -> Homoserine() fRate2() #Modifiers(asp, thr)
	vhdh_products_1: 0  -> NADP() fRate2() #Modifiers(asp, thr)
	vtsy: Threonine(phos!99).Phos(threonine!99) -> Threonine(phos) + Phos(threonine) fRate3()
	vhk: Homoserine() + ATP() -> Threonine(phos!99).Phos(threonine!99) + ADP() fRate4() #Modifiers(thr)
	vnadph_endo: NADPH() -> NADP() fRate5()
	vatpase_reactants_0: 0  -> ATP() -1*(fRate6())
	vatpase_products_0: 0  -> ADP() fRate6()
	vatpase_products_1: 0  -> Phos(threonine) fRate6()
end reaction rules
end model
