###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000072', 'http://identifiers.org/biomodels.db/MODEL9468910329']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/12960402']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0031684']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/4932']
#@creatorEmail:'enuo.he@wolfson.ox.ac.uk'
#@creatorName:'He Enuo'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 7 molecules and 7 reactions. The translated model has 4 molecules and 7 rules'
###
begin model
begin parameters
	r1_k1 0.000000
	r1_k2 0.010000
	r2_v 4.000000
	r3_k1 0.000400
	r4_k1 1.000000
	r5_k1 0.000010
	r6_k1 0.004000
	r7_k1 0.110000
end parameters
begin molecule types
	#^ bqbiol:hasVersion uniprot:P34165, uniprot:P34166
	#^ bqbiol:isVersionOf interpro:IPR006742
	Ligand(receptor)
	#^ bqbiol:is uniprot:P06842
	Receptor(ligand)
	G_alpha(_gdp~_GDP~0,_gtp~_GTP~0,freelevelsofg_beta_gamma)
	#^ bqbiol:is go:GO:0031680
	FreelevelsofG_beta_gamma(g_alpha)
end molecule types
begin seed species
	Ligand(receptor) 3.625244e+41 # 6.02e+17mol/L * 6.022e23/mol *1.0L #Ligand #L
	Receptor(ligand) 6.022e+27 #original 10000.0/L  #Receptor #R
	G_alpha(_gdp~_GDP,_gtp~0,freelevelsofg_beta_gamma!102).FreelevelsofG_beta_gamma(g_alpha!102) 4.2154000000000003e+27 #original 7000.0/L  #InactiveheterotrimericG_protein #G
	FreelevelsofG_beta_gamma(g_alpha) 1.8066e+27 #original 3000.0/L  #FreelevelsofG_beta_gamma #Gbg
	G_alpha(_gdp~_GDP,_gtp~0,freelevelsofg_beta_gamma) 1.8066e+27 #original 3000.0/L  #G_alpha_GDP #Gd
end seed species
begin observables
	Species Ligand Ligand(receptor) #Ligand
	Species Receptor Receptor(ligand) #Receptor
	Species InactiveheterotrimericG_protein G_alpha(_gdp~_GDP,_gtp~0,freelevelsofg_beta_gamma!102).FreelevelsofG_beta_gamma(g_alpha!102) #Inactive heterotrimeric G-protein
	Species FreelevelsofG_beta_gamma FreelevelsofG_beta_gamma(g_alpha) #Free levels of G-beta-gamma
	Species G_alpha_GDP G_alpha(_gdp~_GDP,_gtp~0,freelevelsofg_beta_gamma) #G-alpha-GDP
	Species G_alpha_GTP G_alpha(_gdp~0,_gtp~_GTP,freelevelsofg_beta_gamma) #G-alpha-GTP
	Species Receptor_Ligand Receptor(ligand!101).Ligand(receptor!101) #Receptor-Ligand
end observables
begin functions
	fRate4() = 1.0e-5*Receptor_Ligand
end functions
begin reaction rules
	reaction_0: Ligand(receptor) + Receptor(ligand) <-> Receptor(ligand!101).Ligand(receptor!101) r1_k1,r1_k2
	reaction_1: 0  -> Receptor(ligand) r2_v
	reaction_2: Receptor(ligand) -> 0  r3_k1
	reaction_3: G_alpha(_gdp~_GDP,_gtp~0,freelevelsofg_beta_gamma) + FreelevelsofG_beta_gamma(g_alpha) -> G_alpha(_gdp~_GDP,_gtp~0,freelevelsofg_beta_gamma!102).FreelevelsofG_beta_gamma(g_alpha!102) r4_k1
	reaction_4: G_alpha(_gdp~_GDP,_gtp~0,freelevelsofg_beta_gamma!102).FreelevelsofG_beta_gamma(g_alpha!102) -> G_alpha(_gdp~0,_gtp~_GTP,freelevelsofg_beta_gamma) + FreelevelsofG_beta_gamma(g_alpha) fRate4() #Modifiers(RL)
	reaction_5: Receptor(ligand!101).Ligand(receptor!101) -> 0  r6_k1
	reaction_6: G_alpha(_gdp~0,_gtp~_GTP,freelevelsofg_beta_gamma) -> G_alpha(_gdp~_GDP,_gtp~0,freelevelsofg_beta_gamma) r7_k1
end reaction rules
end model
