###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1166069080', 'http://identifiers.org/biomodels.db/BIOMD0000000082']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/2904647']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/pubmed/6248546', 'http://identifiers.org/pubmed/6277164']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0031684', 'http://identifiers.org/go/GO:0007194']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@creatorEmail:'enuo.he@wolfson.ox.ac.uk'
#@creatorName:'He Enuo'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 10 molecules and 6 reactions. The translated model has 4 molecules and 6 rules'
###
begin model
begin parameters
	r1_k1 5000000.000000
	r1_k7 0.500000
	r2_k2 100000000.000000
	r2_k8 0.100000
	r3_k3 0.100000
	r3_k9 100000.000000
	r4_k4 10000000.000000
	r4_k10 0.100000
	r5_k5 0.050000
	r6_k6 0.100000
end parameters
begin molecule types
	#^ bqbiol:hasVersion uniprot:P08913, uniprot:P18089, uniprot:P18825
	R(DRG~DRG~0,d,gdp,gtp)
	#^ bqbiol:isVersionOf chebi:CHEBI:35569
	D(r)
	#^ bqbiol:is chebi:CHEBI:17552
	GDP(g_~G_~0,r)
	#^ bqbiol:is chebi:CHEBI:15996
	GTP(g_~G_~0,r)
end molecule types
begin seed species
	D(r) 6022000000000000.0 # 1e-08mol/L * 6.022e23/mol *1.0L #D #agonist
	GTP(g_~0,r) 6.022000000000001e+18 #original 1e-05mol/L  #GTP #GTP
	R(DRG~0,d,gdp,gtp) 602200000000000.1 #original 1e-09mol/L  #R #Recptor
	GDP(g_~G_,r) 602200000000000.1 #original 1e-09mol/L  #G_GDP #G_GDP
end seed species
begin observables
	Species D D(r) #D
	Species DR R(DRG~0,d!108,gdp,gtp).D(r!108) #DR
	Species DRG_GDP R(DRG~DRG,d,gdp!109,gtp).GDP(g_~0,r!109) #DRG_GDP
	Species DRG R(DRG~DRG,d,gdp,gtp) #DRG
	Species GDP GDP(g_~0,r) #GDP
	Species DRG_GTP R(DRG~DRG,d,gdp,gtp!110).GTP(g_~0,r!110) #DRG_GTP
	Species GTP GTP(g_~0,r) #GTP
	Species R R(DRG~0,d,gdp,gtp) #R
	Species G_GDP GDP(g_~G_,r) #G_GDP
	Species G_GTP GTP(g_~G_,r) #G_GTP
end observables
begin reaction rules
	Forming: D(r) + R(DRG~0,d,gdp,gtp) <-> R(DRG~0,d!108,gdp,gtp).D(r!108) r1_k1,r1_k7
	reaction_1: R(DRG~0,d!108,gdp,gtp).D(r!108) + GDP(g_~G_,r) <-> R(DRG~DRG,d,gdp!109,gtp).GDP(g_~0,r!109) r2_k2,r2_k8
	reaction_2: R(DRG~DRG,d,gdp!109,gtp).GDP(g_~0,r!109) <-> GDP(g_~0,r) + R(DRG~DRG,d,gdp,gtp) r3_k3,r3_k9
	reaction_3: R(DRG~DRG,d,gdp,gtp) + GTP(g_~0,r) <-> R(DRG~DRG,d,gdp,gtp!110).GTP(g_~0,r!110) r4_k4,r4_k10
	reaction_4: R(DRG~DRG,d,gdp,gtp!110).GTP(g_~0,r!110) -> GTP(g_~G_,r) + R(DRG~0,d!108,gdp,gtp).D(r!108) r5_k5
	reaction_5: GTP(g_~G_,r) -> GDP(g_~G_,r) r6_k6
end reaction rules
end model
