###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL5317679037', 'http://identifiers.org/biomodels.db/BIOMD0000000085']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/16986265']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/biomodels.db/BIOMD0000000086']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/131567']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0008277']
#@creatorEmail:'enuo.he@wolfson.ox.ac.uk'
#@creatorName:'He Enuo'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 17 molecules and 17 reactions. The translated model has 15 molecules and 17 rules'
###
begin model
begin parameters
	r1_k1 529000.000000
	r1_k2 0.000008
	r2_k1 0.013000
	r2_k2 0.000001
	r3_k1 0.000100
	r3_k2 62.300000
	r4_k1 853000.000000
	r4_k2 0.004680
	r5_k1 132000000.000000
	r5_k2 1.280000
	r6_k1 386000.000000
	r6_k2 0.040800
	r7_k1 64100.000000
	r7_k2 0.950000
	r8_k1 94700000.000000
	r8_k2 0.002270
	r9_k1 0.013000
	r9_k2 0.000000
	r10_k1 2.000000
	r10_k2 1470000.000000
	r11_k1 25.000000
	r11_k2 0.244000
	r12_k1 0.000100
	r12_k2 3.830000
	r13_k1 3960000000.000000
	r13_k2 0.000054
	r14_k1 1620000.000000
	r14_k2 0.008750
	r15_k1 6300000.000000
	r15_k2 0.478000
	r16_k1 25.000000
	r16_k2 0.002970
	r17_k1 2.750000
	r17_k2 2940.000000
end parameters
begin molecule types
	#^ bqbiol:hasPart chebi:CHEBI:15996, go:GO:0005834, go:GO:0043235
	RGmT()
	#^ bqbiol:is chebi:CHEBI:18367
	Pi()
	#^ bqbiol:is chebi:CHEBI:17552, kegg.compound:C00035
	D(g)
	#^ bqbiol:hasPart chebi:CHEBI:17552, go:GO:0005834, go:GO:0043235
	RGD()
	#^ bqbiol:isVersionOf go:GO:0005834
	G(d)
	#^ bqbiol:hasPart chebi:CHEBI:15996, interpro:IPR000342, go:GO:0005834, go:GO:0043235
	RGmAT()
	#^ bqbiol:hasPart chebi:CHEBI:17552, interpro:IPR000342, go:GO:0005834
	GAD()
	#^ bqbiol:hasPart go:GO:0005834, go:GO:0043235
	RG()
	#^ bqbiol:hasPart interpro:IPR000342, go:GO:0005834
	GA(r)
	#^ bqbiol:hasPart chebi:CHEBI:17552, interpro:IPR000342, go:GO:0005834, go:GO:0043235
	RGAD()
	#^ bqbiol:isVersionOf interpro:IPR000342
	A()
	#^ bqbiol:hasPart chebi:CHEBI:15996, go:GO:0005834
	GmT()
	#^ bqbiol:hasPart chebi:CHEBI:15996, interpro:IPR000342, go:GO:0005834
	GmAT()
	#^ bqbiol:is chebi:CHEBI:15996, kegg.compound:C00044
	T()
	#^ bqbiol:isVersionOf go:GO:0043235
	#^ bqbiol:hasVersion interpro:IPR000337
	R(ga)
end molecule types
begin seed species
	G(d) 6022000000000000.0 # 1e-08mol/L * 6.022e23/mol *1.0L #G #species_1
	T() 2.818296e+20 #original 0.000468mol/L #T #species_3
	R(ga) 6.022000000000001e+18 #original 1e-05mol/L #R #species_4
	Pi() 2.6496800000000005e+21 #original 0.0044mol/L #Pi #species_7
	D(g) 8.97278e+19 #original 0.000149mol/L #D #species_8
end seed species
begin observables
	Species A A() #A
	Species G G(d) #G
	Species GA GA(r) #GA
	Species T T() #T
	Species R R(ga) #R
	Species GmT GmT() #G*T
	Species GD G(d!112).D(g!112) #GD
	Species Pi Pi() #Pi
	Species D D(g) #D
	Species RG RG() #RG
	Species RGmT RGmT() #RG*T
	Species GmAT GmAT() #G*AT
	Species GAD GAD() #GAD
	Species RGD RGD() #RGD
	Species RGA R(ga!113).GA(r!113) #RGA
	Species RGmAT RGmAT() #RG*AT
	Species RGAD RGAD() #RGAD
end observables
begin functions
	parameter_1() = 2500000000.0*GmAT + 1300000.0*GmT + 2500000000.0*RGmAT + 1300000.0*RGmT
	parameter_0() = 100000000.0*GmAT + 100000000.0*GmT + 100000000.0*RGmAT + 100000000.0*RGmT
end functions
begin reaction rules
	reaction_1: G(d) + T() <-> GmT() r1_k1,r1_k2
	reaction_3: GmT() <-> G(d!112).D(g!112) + Pi() r2_k1,r2_k2
	reaction_4: G(d!112).D(g!112) <-> G(d) + D(g) r3_k1,r3_k2
	reaction_5: RG() + T() <-> RGmT() r4_k1,r4_k2
	reaction_6: GmT() + R(ga) <-> RGmT() r5_k1,r5_k2
	reaction_7: GmT() + A() <-> GmAT() r6_k1,r6_k2
	reaction_8: G(d!112).D(g!112) + A() <-> GAD() r7_k1,r7_k2
	reaction_9: G(d!112).D(g!112) + R(ga) <-> RGD() r8_k1,r8_k2
	reaction_10: RGmT() <-> RGD() + Pi() r9_k1,r9_k2
	reaction_11: RGD() <-> RG() + D(g) r10_k1,r10_k2
	reaction_13: GmAT() <-> GAD() + Pi() r11_k1,r11_k2
	reaction_14: GAD() <-> GA(r) + D(g) r12_k1,r12_k2
	reaction_16: GA(r) + R(ga) <-> R(ga!113).GA(r!113) r13_k1,r13_k2
	reaction_17: R(ga!113).GA(r!113) + T() <-> RGmAT() r14_k1,r14_k2
	reaction_19: RGmT() + A() <-> RGmAT() r15_k1,r15_k2
	reaction_20: RGmAT() <-> RGAD() + Pi() r16_k1,r16_k2
	reaction_23: RGAD() <-> R(ga!113).GA(r!113) + D(g) r17_k1,r17_k2
end reaction rules
end model
