###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000091', 'http://identifiers.org/biomodels.db/MODEL2223638385']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/15610770']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0051085', 'http://identifiers.org/go/GO:0007569', 'http://identifiers.org/go/GO:0009408']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/131567']
#@BQB_HAS_VERSION:['http://identifiers.org/doid/DOID:10652', 'http://identifiers.org/doid/DOID:14330', 'http://identifiers.org/doid/DOID:83']
#@creatorEmail:'c.j.proctor@ncl.ac.uk'
#@creatorName:'Proctor Carole'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 16 molecules and 23 reactions. The translated model has 10 molecules and 25 rules'
###
begin model
begin parameters
	k1 10.0
	k2 2e-05
	k3 50.0
	k4 1e-05
	k5 4e-06
	k6 6e-07
	k7 1e-07
	k8 500.0
	k9 1.0
	k10 0.01
	k11 100.0
	k12 0.5
	k13 0.5
	k14 0.05
	k15 0.08
	k16 1000.0
	k17 8.02e-09
	k18 12.0
	k19 0.02
	k20 0.1
	k21 0.001
end parameters
begin molecule types
	HSE(hsf1)
	X()
	#^ bqbiol:is chebi:CHEBI:16761, kegg.compound:C00008
	ADP()
	MisP(hsp90)
	#^ bqbiol:isVersionOf chebi:CHEBI:26523
	ROS()
	NatP()
	#^ bqbiol:is interpro:IPR001404
	Hsp90(hsf1,misp)
	#^ bqbiol:isVersionOf interpro:IPR000232
	HSF1(hse,hsf1,hsf1,hsf1,hsp90)
	AggP()
	#^ bqbiol:is chebi:CHEBI:15422, kegg.compound:C00002
	ATP()
end molecule types
begin seed species
	Hsp90(hsf1,misp) 300000.0 #Hsp90 #Hsp90
	HSF1(hse,hsf1,hsf1,hsf1,hsp90!152).Hsp90(hsf1!152,misp) 5900.0 #HCom #HCom
	HSF1(hse,hsf1,hsf1,hsf1,hsp90) 100.0 #HSF1 #HSF1
	NatP() 6000000.0 #NatP #NatP
	HSE(hsf1) 1.0 #HSE #HSE
	ROS() 100.0 #ROS #ROS
	ATP() 10000.0 #ATP #ATP
	ADP() 1000.0 #ADP #ADP
end seed species
begin observables
	Species Hsp90 Hsp90(hsf1,misp) #Hsp90
	Species HCom HSF1(hse,hsf1,hsf1,hsf1,hsp90!152).Hsp90(hsf1!152,misp) #HCom
	Species HSF1 HSF1(hse,hsf1,hsf1,hsf1,hsp90) #HSF1
	Species MisP MisP(hsp90) #MisP
	Species MCom Hsp90(hsf1,misp!151).MisP(hsp90!151) #MCom
	Species TriH HSF1(hse,hsf1!150,hsf1!154,hsf1,hsp90).HSF1(hse,hsf1!150,hsf1!153,hsf1,hsp90).HSF1(hse,hsf1!153,hsf1!154,hsf1,hsp90) #TriH
	Species DiH HSF1(hse,hsf1!150,hsf1,hsf1,hsp90).HSF1(hse,hsf1!150,hsf1,hsf1,hsp90) #DiH
	Species NatP NatP() #NatP
	Species AggP AggP() #AggP
	Species HSE HSE(hsf1) #HSE
	Species HSETriH HSF1(hse,hsf1!150,hsf1!154,hsf1,hsp90).HSF1(hse!155,hsf1!150,hsf1!153,hsf1,hsp90).HSF1(hse,hsf1!153,hsf1!154,hsf1,hsp90).HSE(hsf1!155) #HSETriH
	Species X X() #X
	Species ROS ROS() #ROS
	Species ATP ATP() #ATP
	Species ADP ADP() #ADP
end observables
begin functions
	fRate6() = MisP*k7*(MisP - 1)/2
	fRate10() = HSF1*k10*(HSF1 - 1)/2
end functions
begin reaction rules
	proteinSynthesis: 0  -> NatP() k1
	misfolding: NatP() + ROS() -> MisP(hsp90) + ROS() k2
	Hsp90MisPBinding: MisP(hsp90) + Hsp90(hsf1,misp) -> Hsp90(hsf1,misp!151).MisP(hsp90!151) k3
	unsuccessulRefolding: Hsp90(hsf1,misp!151).MisP(hsp90!151) -> MisP(hsp90) + Hsp90(hsf1,misp) k4
	refolding: Hsp90(hsf1,misp!151).MisP(hsp90!151) + ATP() -> Hsp90(hsf1,misp) + NatP() + ADP() k5
	proteinDegradation: MisP(hsp90) + ATP() -> ADP() k6
	proteinAggregation1_reactants_0: 0  -> MisP(hsp90) -1*2.0*(fRate6())
	proteinAggregation1_products_0: 0  -> AggP() fRate6()
	proteinAggregation2: MisP(hsp90) + AggP() -> AggP() + AggP() k7
	Hsp90HSF1Binding: Hsp90(hsf1,misp) + HSF1(hse,hsf1,hsf1,hsf1,hsp90) -> HSF1(hse,hsf1,hsf1,hsf1,hsp90!152).Hsp90(hsf1!152,misp) k8
	Hsp90HSF1Release: HSF1(hse,hsf1,hsf1,hsf1,hsp90!152).Hsp90(hsf1!152,misp) -> Hsp90(hsf1,misp) + HSF1(hse,hsf1,hsf1,hsf1,hsp90) k9
	dimerisation_reactants_0: 0  -> HSF1(hse,hsf1,hsf1,hsf1,hsp90) -1*2.0*(fRate10())
	dimerisation_products_0: 0  -> HSF1(hse,hsf1!150,hsf1,hsf1,hsp90).HSF1(hse,hsf1!150,hsf1,hsf1,hsp90) fRate10()
	trimerisation: HSF1(hse,hsf1,hsf1,hsf1,hsp90) + HSF1(hse,hsf1!150,hsf1,hsf1,hsp90).HSF1(hse,hsf1!150,hsf1,hsf1,hsp90) -> HSF1(hse,hsf1!150,hsf1!154,hsf1,hsp90).HSF1(hse,hsf1!150,hsf1!153,hsf1,hsp90).HSF1(hse,hsf1!153,hsf1!154,hsf1,hsp90) k11
	deTrimerisation: HSF1(hse,hsf1!150,hsf1!154,hsf1,hsp90).HSF1(hse,hsf1!150,hsf1!153,hsf1,hsp90).HSF1(hse,hsf1!153,hsf1!154,hsf1,hsp90) -> HSF1(hse,hsf1,hsf1,hsf1,hsp90) + HSF1(hse,hsf1!150,hsf1,hsf1,hsp90).HSF1(hse,hsf1!150,hsf1,hsf1,hsp90) k12
	deDimerisation: HSF1(hse,hsf1!150,hsf1,hsf1,hsp90).HSF1(hse,hsf1!150,hsf1,hsf1,hsp90) -> HSF1(hse,hsf1,hsf1,hsf1,hsp90) + HSF1(hse,hsf1,hsf1,hsf1,hsp90) k13
	HSETriHBinding: HSF1(hse,hsf1!150,hsf1!154,hsf1,hsp90).HSF1(hse,hsf1!150,hsf1!153,hsf1,hsp90).HSF1(hse,hsf1!153,hsf1!154,hsf1,hsp90) + HSE(hsf1) -> HSF1(hse,hsf1!150,hsf1!154,hsf1,hsp90).HSF1(hse!155,hsf1!150,hsf1!153,hsf1,hsp90).HSF1(hse,hsf1!153,hsf1!154,hsf1,hsp90).HSE(hsf1!155) k14
	HSETriHRelease: HSF1(hse,hsf1!150,hsf1!154,hsf1,hsp90).HSF1(hse!155,hsf1!150,hsf1!153,hsf1,hsp90).HSF1(hse,hsf1!153,hsf1!154,hsf1,hsp90).HSE(hsf1!155) -> HSE(hsf1) + HSF1(hse,hsf1!150,hsf1!154,hsf1,hsp90).HSF1(hse,hsf1!150,hsf1!153,hsf1,hsp90).HSF1(hse,hsf1!153,hsf1!154,hsf1,hsp90) k15
	Hsp90Transcription: HSF1(hse,hsf1!150,hsf1!154,hsf1,hsp90).HSF1(hse!155,hsf1!150,hsf1!153,hsf1,hsp90).HSF1(hse,hsf1!153,hsf1!154,hsf1,hsp90).HSE(hsf1!155) -> HSF1(hse,hsf1!150,hsf1!154,hsf1,hsp90).HSF1(hse!155,hsf1!150,hsf1!153,hsf1,hsp90).HSF1(hse,hsf1!153,hsf1!154,hsf1,hsp90).HSE(hsf1!155) + Hsp90(hsf1,misp) k16
	Hsp90Degradation: Hsp90(hsf1,misp) + ATP() -> ADP() k17
	countTime: 0  -> X() 1.00000000000000
	ATPformation: ADP() -> ATP() k18
	ATPconsumption: ATP() -> ADP() k19
	radicalFormation: 0  -> ROS() k20
	radicalScavenging: ROS() -> 0  k21
end reaction rules
end model
