###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL4931762955', 'http://identifiers.org/biomodels.db/BIOMD0000000104']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/12423338']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/131567']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0010468']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046']
#@creatorEmail:'lenov@ebi.ac.uk'
#@creatorName:'Le Novère Nicolas'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 6 molecules and 2 reactions. The translated model has 3 molecules and 2 rules'
###
begin model
begin parameters
	E1 6.022e+23 #original 1.0mol/L
	Etot 6.022e+23 #original 1.0mol/L
	r1_k1 1.000000
	r2_k2 1.000000
end parameters
begin molecule types
	#^ bqbiol:isVersionOf biomodels.sbo:SBO:0000011
	P()
	#^ bqbiol:isVersionOf biomodels.sbo:SBO:0000015
	S()
	#^ bqbiol:isVersionOf biomodels.sbo:SBO:0000299
	X1()
end molecule types
begin seed species
	S() 6.022e+23 # 1.0mol/L * 6.022e23/mol *1.0L #S #species_0
end seed species
begin observables
	Species S S() #S
	Species X1 X1() #X1
	Species P P() #P
end observables
begin functions
	E2_ar() =  -E1 + Etot
	fRate0 =  1.0*E1
	fRate1() = 1.0*E2_ar
end functions
begin reaction rules
	reaction_0: S() -> X1() fRate0() #Modifiers(species_2)
	reaction_1: X1() -> P() fRate1() #Modifiers(species_3)
end reaction rules
end model
