###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL8610058649', 'http://identifiers.org/biomodels.db/BIOMD0000000106']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/17381237']
#@BQB_IS_PART_OF:['http://identifiers.org/kegg.pathway/map00590']
#@BQB_IS_VERSION_OF:['http://identifiers.org/obo.go/GO:0019369']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@creatorEmail:'enuo@caltech.edu'
#@creatorName:'He Enuo'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 25 molecules and 32 reactions. The translated model has 18 molecules and 32 rules'
###
begin model
begin parameters
	lin 12.0
	K15 3600.0
	k15 2600.0
	K16 1000.0
	k16 70.0
	K17 1000.0
	k17 50.0
	K18 1000.0
	k18 50.0
	K19 3000.0
	k19 160.0
	K20 1599.0
	k20 4.0
	K21 5000.0
	k21 5.0
	K22 125.0
	k22 20.0
	K23 150.0
	k23 3.9
	K24 500.0
	k24 70.0
	kd2 0.05
	kd3 0.01
	kd8 0.1
	kd9 0.001
	kd11 0.001
	kd12 0.07
	kd13 0.01
	kd16 0.01
	ki1 0.3
	ki2 30.0
	ki3 30.0
	ki4 0.6
	ki5 0.1
	ki6 0.01
	ki7 30.0
	ki8 4.0
	ki9 0.175
	ki10 0.01
	ki11 15.0
	ki12 6.3
	ki14 0.2
	ki15 0.86
	ki16 10.0
	ki17 10.0
	ki18 10.0
	KI19 500.0
	KI20 200.0
	KI21 500.0
	KI22 500.0
	KI23 0.053
	KI24 2.3e-05
	a24 0.15
	ks 500.0
	PLA2 9.033e+17 #original 1.5micromole/L
	COX_2 1.2044e+17 #original 0.2micromole/L
	PGES 3.011e+17 #original 0.5micromole/L
	CYP4F3 4.215400000000001e+16 #original 0.07micromole/L
	PHGPx 4.8176e+17 #original 0.8micromole/L
end parameters
begin molecule types
	#^ bqbiol:is obo.chebi:CHEBI:15551, kegg.compound:C00584
	PGE2()
	#^ bqbiol:is obo.chebi:CHEBI:15626, kegg.compound:C05965
	s12_HPETE()
	#^ bqbiol:is obo.chebi:CHEBI:28209, kegg.compound:C04805
	s5_HETE()
	#^ bqbiol:is obo.chebi:CHEBI:15647
	LTB4(w_~W_~0)
	#^ bqbiol:is obo.chebi:CHEBI:28728, kegg.compound:C05963
	TXB2()
	#^ bqbiol:is uniprot:P09960
	LTA4H()
	#^ bqbiol:is obo.chebi:CHEBI:15554, kegg.compound:C00427
	PGH2()
	#^ bqbiol:is obo.chebi:CHEBI:15651
	LTA4()
	#^ bqbiol:is obo.chebi:CHEBI:15632, kegg.compound:C05356
	s5_HPETE()
	#^ bqbiol:is uniprot:P16050
	s15_LOX()
	#^ bqbiol:is uniprot:P09917
	s5_LOX()
	#^ bqbiol:is obo.chebi:CHEBI:34146, kegg.compound:C14777
	s12_HETE()
	#^ bqbiol:is uniprot:P24557
	TXAS()
	#^ bqbiol:is obo.chebi:CHEBI:15627, kegg.compound:C02198
	TXA2()
	#^ bqbiol:is uniprot:P18054
	s12_LOX()
	#^ bqbiol:is obo.chebi:CHEBI:15558, kegg.compound:C04742
	s15_HETE()
	#^ bqbiol:is obo.chebi:CHEBI:15628, kegg.compound:C05966
	s15_HPETE()
	#^ bqbiol:is obo.chebi:CHEBI:15843, kegg.compound:C00219
	AA()
end molecule types
begin seed species
	AA() 602200000000000.1 # (0.001 * 1e-06)mol/L * 6.022e23/mol *1.0L #AA #x1
	s5_HPETE() 602200000000000.1 #original 0.001micromole/L  #s5_HPETE #x10
	s5_HETE() 602200000000000.1 #original 0.001micromole/L  #s5_HETE #x11
	LTA4() 602200000000000.1 #original 0.001micromole/L  #LTA4 #x12
	LTB4(w_~0) 602200000000000.1 #original 0.001micromole/L  #LTB4 #x13
	LTB4(w_~W_) 602200000000000.1 #original 0.001micromole/L  #w_LTB4 #x14
	s15_LOX() 9.033e+17 #original 1.5micromole/L  #s15_LOX #x16
	s12_LOX() 3.011e+17 #original 0.5micromole/L  #s12_LOX #x17
	s15_HPETE() 602200000000000.1 #original 0.001micromole/L  #s15_HPETE #x2
	TXAS() 3.011e+17 #original 0.5micromole/L  #TXAS #x20
	s5_LOX() 3.011e+18 #original 5.0micromole/L  #s5_LOX #x21
	LTA4H() 4.57672e+17 #original 0.76micromole/L  #LTA4H #x22
	s15_HETE() 602200000000000.1 #original 0.001micromole/L  #s15_HETE #x3
	s12_HPETE() 602200000000000.1 #original 0.001micromole/L  #s12_HPETE #x4
	s12_HETE() 602200000000000.1 #original 0.001micromole/L  #s12_HETE #x5
	PGH2() 602200000000000.1 #original 0.001micromole/L  #PGH2 #x6
	PGE2() 602200000000000.1 #original 0.001micromole/L  #PGE2 #x7
	TXA2() 602200000000000.1 #original 0.001micromole/L  #TXA2 #x8
	TXB2() 602200000000000.1 #original 0.001micromole/L  #TXB2 #x9
end seed species
begin observables
	Species AA AA() #AA
	Species s5_HPETE s5_HPETE() #5-HPETE
	Species s5_HETE s5_HETE() #5-HETE
	Species LTA4 LTA4() #LTA4
	Species LTB4 LTB4(w_~0) #LTB4
	Species w_LTB4 LTB4(w_~W_) #w-LTB4
	Species s15_LOX s15_LOX() #15-LOX
	Species s12_LOX s12_LOX() #12-LOX
	Species s15_HPETE s15_HPETE() #15-HPETE
	Species TXAS TXAS() #TXAS
	Species s5_LOX s5_LOX() #5-LOX
	Species LTA4H LTA4H() #LTA4H
	Species s15_HETE s15_HETE() #15-HETE
	Species s12_HPETE s12_HPETE() #12-HPETE
	Species s12_HETE s12_HETE() #12-HETE
	Species PGH2 PGH2() #PGH2
	Species PGE2 PGE2() #PGE2
	Species TXA2 TXA2() #TXA2
	Species TXB2 TXB2() #TXB2
end observables
begin functions
	fRate0() = K15*PLA2*ks*lin*(KI19*KI20*KI21*KI22 + KI19*KI20*KI21*s5_HETE + KI19*KI20*KI22*LTB4 + KI19*KI21*KI22*s15_HPETE + KI20*KI21*KI22*s12_HPETE)/(KI19*KI20*KI21*KI22*(AA*k15 + ks*(k15 + lin)))
	fRate1() = K16*ks*s15_LOX/(k16*s15_HPETE + ks*(AA + k16))
	fRate2() = K24*PHGPx*ks/(k24*s15_HETE + ks*(k24 + s15_HPETE))
	fRate3() = K17*s12_LOX/(AA + k17 + k17*s12_HPETE/ks + k17*s12_HPETE/ki18 + k17*s15_HETE/ki16)
	fRate4() = K24*PHGPx*ks/(k24*s12_HETE + ks*(k24 + s12_HPETE))
	fRate5() = COX_2*K18*ki3*ks/(PGE2*k18*ks + PGH2*k18*ki3 + ki3*ks*(AA + k18))
	fRate6() = K19*PGES/(AA*k19/ki1 + PGE2*k19/ks + PGH2 + k19 + k19*s15_HETE/ki2)
	fRate7() = K20*TXAS*ks/(TXA2*k20 + ks*(PGH2 + k20))
	fRate8() = TXA2*kd8
	fRate9() = K21*s5_LOX/(AA + PGE2*k21/ki11 + k21 + k21*s5_HPETE/ks + k21*s15_HETE/ki8 + k21*s12_HETE/ki7 + k21*s5_HETE/ki12)
	fRate10() = K24*PHGPx*ks/(k24*s5_HETE + ks*(k24 + s5_HPETE))
	fRate11() = K21*s5_LOX/(LTA4*k21/ks + PGE2*k21/ki11 + k21 + k21*s15_HETE/ki8 + k21*s12_HETE/ki7 + k21*s5_HETE/ki12 + s5_HPETE)
	fRate12() = K22*LTA4H*ks/(LTB4*k22 + ks*(LTA4 + k22))
	fRate13() = CYP4F3*K23/(LTB4 + k23 + k23*w_LTB4/ks + k23*s5_HETE/ki15 + k23*s12_HETE/ki14)
	fRate14() = PGE2^2*a24/(KI24^2 + PGE2^2)
	fRate15() = ki17*s15_HPETE
	fRate16() = ki4*s15_HPETE
	fRate17() = KI23*LTB4*s5_LOX
	fRate18() = 0.00775193798449612*K22*LTA4/(LTA4 + k22)
	fRate20() = PGH2*ki5
	fRate28() = LTA4*ki9
	fRate29() = ki10*s5_HPETE
	fRate30() = ki6*s15_HPETE
end functions
begin reaction rules
	R1: 0  -> AA() fRate0() #Modifiers(x11, x13, x15, x2, x4)
	R2: AA() -> s15_HPETE() fRate1() #Modifiers(x16)
	R3: s15_HPETE() -> s15_HETE() fRate2() #Modifiers(x24)
	R4: AA() -> s12_HPETE() fRate3() #Modifiers(x17, x3)
	R5: s12_HPETE() -> s12_HETE() fRate4() #Modifiers(x24)
	R6: AA() -> PGH2() fRate5() #Modifiers(x18, x7)
	R7: PGH2() -> PGE2() fRate6() #Modifiers(x1, x19, x3)
	R8: PGH2() -> TXA2() fRate7() #Modifiers(x20)
	R9: 0  -> TXB2() fRate8() #Modifiers(x8)
	R10: AA() -> s5_HPETE() fRate9() #Modifiers(x11, x3, x5, x7, x21)
	R11: s5_HPETE() -> s5_HETE() fRate10() #Modifiers(x24)
	R12: s5_HPETE() -> LTA4() fRate11() #Modifiers(x11, x21, x3, x5, x7)
	R13: LTA4() -> LTB4(w_~0) fRate12() #Modifiers(x22)
	R14: LTB4(w_~0) -> LTB4(w_~W_) fRate13() #Modifiers(x11, x23, x5)
	R16: 0  -> s15_LOX() fRate14() #Modifiers(x7)
	R17: s12_LOX() -> 0  fRate15() #Modifiers(x2)
	R20: TXAS() -> 0  fRate16() #Modifiers(x2)
	R21: 0  -> s5_LOX() fRate17() #Modifiers(x13)
	R22: LTA4H() -> 0  fRate18() #Modifiers(x12)
	R18: TXB2() -> 0  kd9
	R19: TXAS() -> 0  fRate20() #Modifiers(x6)
	R25: TXA2() -> 0  kd8
	R24: LTB4(w_~0) -> 0  kd13
	R23: LTA4() -> 0  kd12
	R26: s15_HETE() -> 0  kd3
	R27: s15_HPETE() -> 0  kd2
	R28: s15_LOX() -> 0  kd16
	R29: s5_HETE() -> 0  kd11
	R30: s5_LOX() -> 0  fRate28() #Modifiers(x12)
	R31: s5_LOX() -> 0  fRate29() #Modifiers(x10)
	R32: s5_LOX() -> 0  fRate30() #Modifiers(x2)
	R34: AA() -> 0  0.100000000000000
end reaction rules
end model
