###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL6931308526', 'http://identifiers.org/biomodels.db/BIOMD0000000110']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/14645053']
#@BQB_HAS_VERSION:['http://identifiers.org/kegg.pathway/sce04111', 'http://identifiers.org/reactome/REACT_152']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/2759']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0044839', 'http://identifiers.org/go/GO:0044843']
#@creatorEmail:'enuo@caltech.edu'
#@creatorName:'He Enuo'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 15 molecules and 22 reactions. The translated model has 9 molecules and 27 rules'
###
begin model
begin parameters
	k1 300.0
	k2 5.0
	k3 30.0
	k4 30.0
	k5 0.1
	k6 1.0
	k7 10.0
	k8 100.0
	k9 1.0
	k10 10.0
	k11 1.0
	k13 1.0
	k14 1.0
	k15 1.0
	k16 2.0
	k2u 50.0
	k16u 25.0
	a 4.0
	az 10.0
	aw 10.0
	ai 10.0
	bz 0.1
	bw 0.1
	bi 0.1
	cz 1.0
	cw 1.0
	ci 1.0
	Tau 25.0
	k12 0
	k7u 0
	TotalCDK 1.2044e+26 #original 200.0arbitrary subst./arbitrary vol
end parameters
begin molecule types
	#^ bqbiol:isHomologTo uniprot:P30291
	Unphosphorylatedwee1()
	#^ bqbiol:hasPart interpro:IPR006670, go:GO:0000307
	ActiveCyclin_CDKcomplex(Cyclin_CDK_CKIcomplexwithCKIphosphorylated~Cyclin_CDK_CKIcomplexwithCKIphosphorylated~0,freecki)
	#^ bqbiol:hasVersion uniprot:P04821
	UnphosphorylatedCDC25()
	#^ bqbiol:hasVersion uniprot:P04821
	One_sitephosphorylatedCDC25()
	#^ bqbiol:isHomologTo uniprot:P30291
	phosphorylatedwee1()
	#^ bqbiol:isVersionOf interpro:IPR006670
	Freecyclin(InactiveCyclin_CDKcomplex~InactiveCyclin_CDKcomplex~0)
	#^ bqbiol:isVersionOf interpro:IPR003175
	FreeCKI(activecyclin_cdkcomplex)
	#^ bqbiol:hasVersion uniprot:P04821
	Two_sitephosphorylatedCDC25()
	#^ bqbiol:isVersionOf interpro:IPR001810, go:GO:0005680
	ActiveSKP2orAPC()
end molecule types
begin seed species
	Freecyclin(InactiveCyclin_CDKcomplex~InactiveCyclin_CDKcomplex) 6.022000000000001e+22 # 0.1mol/L * 6.022e23/mol *1.0L #InactiveCyclin_CDKcomplex #x1
	ActiveCyclin_CDKcomplex(Cyclin_CDK_CKIcomplexwithCKIphosphorylated~0,freecki) 6.022000000000001e+22 #original 0.1arbitrary subst./arbitrary vol #ActiveCyclin_CDKcomplex #x
end seed species
begin observables
	Species InactiveCyclin_CDKcomplex Freecyclin(InactiveCyclin_CDKcomplex~InactiveCyclin_CDKcomplex) # Inactive Cyclin:CDK complex
	Species ActiveCyclin_CDKcomplex ActiveCyclin_CDKcomplex(Cyclin_CDK_CKIcomplexwithCKIphosphorylated~0,freecki) #Active Cyclin:CDK complex
	Species UnphosphorylatedCDC25 UnphosphorylatedCDC25() #Unphosphorylated CDC25
	Species One_sitephosphorylatedCDC25 One_sitephosphorylatedCDC25() #One-site phosphorylated CDC25
	Species Two_sitephosphorylatedCDC25 Two_sitephosphorylatedCDC25() #Two-site phosphorylated CDC25
	Species Unphosphorylatedwee1 Unphosphorylatedwee1() #Unphosphorylated wee1
	Species phosphorylatedwee1 phosphorylatedwee1() #phosphorylated wee1
	Species ActiveSKP2orAPC ActiveSKP2orAPC() #Active SKP2 or APC
	Species FreeCKI FreeCKI(activecyclin_cdkcomplex) #Free CKI
	Species Cyclin_CDK_CKIcomplexwithCKIunphosphorylated ActiveCyclin_CDKcomplex(Cyclin_CDK_CKIcomplexwithCKIphosphorylated~0,freecki!190).FreeCKI(activecyclin_cdkcomplex!190) #Cyclin:CDK:CKI complex with CKI unphosphorylated
	Species Cyclin_CDK_CKIcomplexwithCKIphosphorylated ActiveCyclin_CDKcomplex(Cyclin_CDK_CKIcomplexwithCKIphosphorylated~Cyclin_CDK_CKIcomplexwithCKIphosphorylated,freecki) #Cyclin:CDK:CKI complex with CKI phosphorylated
	Species Freecyclin Freecyclin(InactiveCyclin_CDKcomplex~0) #Free cyclin
end observables
begin functions
	totalCyclin_ar() = ActiveCyclin_CDKcomplex + Freecyclin + InactiveCyclin_CDKcomplex
	FreeCDK_ar() = 1.0*(-ActiveCyclin_CDKcomplex - Cyclin_CDK_CKIcomplexwithCKIphosphorylated - Cyclin_CDK_CKIcomplexwithCKIunphosphorylated - InactiveCyclin_CDKcomplex + TotalCDK)/TotalCDK
	fRate1() = FreeCDK_ar*k3
	fRate2() = Freecyclin*(ActiveSKP2orAPC*k2u + k2)
	fRate3() = -One_sitephosphorylatedCDC25*az + UnphosphorylatedCDC25*(ActiveCyclin_CDKcomplex*cz + bz)
	fRate4() = ActiveCyclin_CDKcomplex*(Unphosphorylatedwee1 + k6) - InactiveCyclin_CDKcomplex*(Two_sitephosphorylatedCDC25 + k5)
	fRate5() = One_sitephosphorylatedCDC25*(ActiveCyclin_CDKcomplex*cz + bz) - Two_sitephosphorylatedCDC25*az
	fRate7() = Unphosphorylatedwee1*(ActiveCyclin_CDKcomplex*cw + bw) - aw*phosphorylatedwee1
	fRate8() = ActiveCyclin_CDKcomplex^2/(Tau*(ActiveCyclin_CDKcomplex^2 + a^2))
	fRate11() = -Cyclin_CDK_CKIcomplexwithCKIphosphorylated*ai + Cyclin_CDK_CKIcomplexwithCKIunphosphorylated*(ActiveCyclin_CDKcomplex*ci + bi)
	fRate12() = 1/Tau
	fRate14() = k16*k16u
	fRate21() = ActiveCyclin_CDKcomplex*(ActiveSKP2orAPC*k7u + k7)
end functions
begin reaction rules
	reaction_0000001: 0  -> Freecyclin(InactiveCyclin_CDKcomplex~0) k1
	reaction_0000002: Freecyclin(InactiveCyclin_CDKcomplex~0) <-> Freecyclin(InactiveCyclin_CDKcomplex~InactiveCyclin_CDKcomplex) fRate1(),k4 #Modifiers(c)
	reaction_0000003_reactants_0: 0  -> Freecyclin(InactiveCyclin_CDKcomplex~0) -1*(fRate2()) #Modifiers(u)
	reaction_0000004_reactants_0: 0  -> UnphosphorylatedCDC25() -1*(fRate3()) #Modifiers(x)
	reaction_0000004_products_0: 0  -> One_sitephosphorylatedCDC25() fRate3() #Modifiers(x)
	reaction_0000005_reactants_0: 0  -> ActiveCyclin_CDKcomplex(Cyclin_CDK_CKIcomplexwithCKIphosphorylated~0,freecki) -1*(fRate4()) #Modifiers(z2, w0)
	reaction_0000005_products_0: 0  -> Freecyclin(InactiveCyclin_CDKcomplex~InactiveCyclin_CDKcomplex) fRate4() #Modifiers(z2, w0)
	reaction_0000006_reactants_0: 0  -> One_sitephosphorylatedCDC25() -1*(fRate5()) #Modifiers(x)
	reaction_0000006_products_0: 0  -> Two_sitephosphorylatedCDC25() fRate5() #Modifiers(x)
	reaction_0000007: 0  -> Unphosphorylatedwee1() k10
	reaction_000008_reactants_0: 0  -> Unphosphorylatedwee1() -1*(fRate7()) #Modifiers(x)
	reaction_000008_products_0: 0  -> phosphorylatedwee1() fRate7() #Modifiers(x)
	reaction_000009: 0  -> ActiveSKP2orAPC() fRate8() #Modifiers(x)
	reaction_0000010: 0  -> FreeCKI(activecyclin_cdkcomplex) k12
	reaction_0000011: FreeCKI(activecyclin_cdkcomplex) + ActiveCyclin_CDKcomplex(Cyclin_CDK_CKIcomplexwithCKIphosphorylated~0,freecki) <-> ActiveCyclin_CDKcomplex(Cyclin_CDK_CKIcomplexwithCKIphosphorylated~0,freecki!190).FreeCKI(activecyclin_cdkcomplex!190) k14,k15
	reaction_0000014_reactants_0: 0  -> ActiveCyclin_CDKcomplex(Cyclin_CDK_CKIcomplexwithCKIphosphorylated~0,freecki!190).FreeCKI(activecyclin_cdkcomplex!190) -1*(fRate11()) #Modifiers(x)
	reaction_0000014_products_0: 0  -> ActiveCyclin_CDKcomplex(Cyclin_CDK_CKIcomplexwithCKIphosphorylated~Cyclin_CDK_CKIcomplexwithCKIphosphorylated,freecki) fRate11() #Modifiers(x)
	reaction_0000013: ActiveSKP2orAPC() -> 0  fRate12()
	reaction_0000015: FreeCKI(activecyclin_cdkcomplex) -> 0  k13
	reaction_0000016: ActiveCyclin_CDKcomplex(Cyclin_CDK_CKIcomplexwithCKIphosphorylated~Cyclin_CDK_CKIcomplexwithCKIphosphorylated,freecki) -> ActiveCyclin_CDKcomplex(Cyclin_CDK_CKIcomplexwithCKIphosphorylated~0,freecki) fRate14()
	reaction_0000017: Unphosphorylatedwee1() -> 0  k11
	reaction_0000018: phosphorylatedwee1() -> 0  k11
	reaction_0000019: UnphosphorylatedCDC25() -> 0  k9
	reaction_0000020: One_sitephosphorylatedCDC25() -> 0  k9
	reaction_0000021: Two_sitephosphorylatedCDC25() -> 0  k9
	reaction_0000022: 0  -> UnphosphorylatedCDC25() k8
	reaction_0000023_reactants_0: 0  -> ActiveCyclin_CDKcomplex(Cyclin_CDK_CKIcomplexwithCKIphosphorylated~0,freecki) -1*(fRate21()) #Modifiers(u)
end reaction rules
end model
