###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000111', 'http://identifiers.org/biomodels.db/MODEL6488296959']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/12779461']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/4894']
#@BQB_IS_VERSION_OF:['http://identifiers.org/kegg.pathway/spo04111', 'http://identifiers.org/obo.go/GO:0000278']
#@BQB_HAS_VERSION:['http://identifiers.org/reactome/REACT_152']
#@creatorEmail:'hdharuri@cds.caltech.edu'
#@creatorName:'Dharuri Harish'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 10 molecules and 19 reactions. The translated model has 9 molecules and 19 rules'
###
begin model
begin parameters
	Kdiss 0.001 #units:dimensionless
	k15 1.5 #units:min_inv
	J16 0.01 #units:dimensionless
	k16_prime 1.0 #units:min_inv
	k16_double_prime 2.0 #units:min_inv
	J15 0.01 #units:dimensionless
	kwee_prime 0.15 #units:min_inv
	kwee_double_prime 1.3 #units:min_inv
	Vawee 0.25 #units:min_inv
	Jiwee 0.01 #units:dimensionless
	Viwee 1.0 #units:min_inv
	Jawee 0.01 #units:dimensionless
	k25_prime 0.05 #units:min_inv
	k25_double_prime 5.0 #units:min_inv
	Va25 1.0 #units:min_inv
	Ji25 0.01 #units:dimensionless
	Vi25 0.25 #units:min_inv
	Ja25 0.01 #units:dimensionless
	k1 0.03 #units:min_inv
	k2_prime 0.03 #units:min_inv
	k2_double_prime 1.0 #units:min_inv
	k2_triple_prime 0.1 #units:min_inv
	k3_prime 1.0 #units:min_inv
	k3_double_prime 10.0 #units:min_inv
	J3 0.01 #units:dimensionless
	k4_prime 2.0 #units:min_inv
	k4 35.0 #units:min_inv
	J4 0.01 #units:dimensionless
	k5_prime 0.005 #units:min_inv
	k5_double_prime 0.3 #units:min_inv
	J5 0.3 #units:dimensionless
	k6 0.1 #units:min_inv
	k7 1.0 #units:min_inv
	J7 0.001 #units:dimensionless
	k8 0.25 #units:min_inv
	J8 0.001 #units:dimensionless
	k9 0.1 #units:min_inv
	J9 0.01 #units:dimensionless
	k10 0.04 #units:min_inv
	J10 0.01 #units:dimensionless
	k11 0.1 #units:min_inv
	k12 0.01 #units:min_inv
	k12_prime 1.0 #units:min_inv
	k12_double_prime 3.0 #units:min_inv
	k13 0.1 #units:min_inv
	k14 0.1 #units:min_inv
	mu 0.005 #units:min_inv
	flag_MPF 0
end parameters
begin molecule types
	#^ bqbiol:is uniprot:O13286
	ste9()
	#^ bqbiol:is uniprot:P78972
	slp1T()
	#^ bqbiol:is uniprot:P78972
	slp1()
	CellMass()
	#^ bqbiol:hasPart uniprot:P04551, interpro:IPR015454
	preMPF()
	#^ bqbiol:is uniprot:P40380
	rum1T()
	#^ bqbiol:isVersionOf uniprot:P24865
	SK()
	#^ bqbiol:isVersionOf interpro:IPR015454
	Totalcdc13()
	IEP()
end molecule types
begin seed species
	Totalcdc13() 0.2 #Totalcdc13 #cdc13T
	ste9() 1.0 #ste9 #ste9
	slp1() 2.2 #slp1 #slp1
	CellMass() 1.0 #CellMass #M
end seed species
begin observables
	Species Totalcdc13 Totalcdc13() #Total cdc13
	Species preMPF preMPF() #preMPF
	Species ste9 ste9() #ste9
	Species slp1T slp1T() #slp1T
	Species slp1 slp1() #slp1
	Species IEP IEP() #IEP
	Species rum1T rum1T() #rum1T
	Species SK SK() #SK
	Species CellMass CellMass() #Cell Mass
end observables
begin functions
	sigma() = Kdiss + Totalcdc13 + rum1T
	Trimer() = 2*Totalcdc13*rum1T/(sigma + (-4*Totalcdc13*rum1T + sigma^2)^0.5)
	M_phasepromotingfactor_ar() = (Totalcdc13 - Trimer)*(Totalcdc13 - preMPF)/Totalcdc13
	k25() = 2*Ji25*M_phasepromotingfactor_ar*Va25*(k25_double_prime - k25_prime)/(Ja25*Vi25 + Ji25*M_phasepromotingfactor_ar*Va25 - M_phasepromotingfactor_ar*Va25 + Vi25 + sqrt(-Ji25*M_phasepromotingfactor_ar*Va25*(-4*M_phasepromotingfactor_ar*Va25 + 4*Vi25) + (Ja25*Vi25 + Ji25*M_phasepromotingfactor_ar*Va25 - M_phasepromotingfactor_ar*Va25 + Vi25)^2)) + k25_prime
	kwee() = 2*Jiwee*Vawee*(kwee_double_prime - kwee_prime)/(Jawee*M_phasepromotingfactor_ar*Viwee + Jiwee*Vawee + M_phasepromotingfactor_ar*Viwee - Vawee + sqrt(-Jiwee*Vawee*(4*M_phasepromotingfactor_ar*Viwee - 4*Vawee) + (Jawee*M_phasepromotingfactor_ar*Viwee + Jiwee*Vawee + M_phasepromotingfactor_ar*Viwee - Vawee)^2)) + kwee_prime
	TF() = 2*CellMass*J16*k15/(CellMass*J16*k15 - CellMass*k15 + J15*(M_phasepromotingfactor_ar*k16_double_prime + k16_prime) + M_phasepromotingfactor_ar*k16_double_prime + k16_prime + sqrt(-CellMass*J16*k15*(-4*CellMass*k15 + 4*M_phasepromotingfactor_ar*k16_double_prime + 4*k16_prime) + (CellMass*J16*k15 - CellMass*k15 + J15*(M_phasepromotingfactor_ar*k16_double_prime + k16_prime) + M_phasepromotingfactor_ar*k16_double_prime + k16_prime)^2))
	fRate0() = CellMass*k1
	fRate1() = Totalcdc13*(k2_double_prime*ste9 + k2_prime + k2_triple_prime*slp1)
	fRate2() = Totalcdc13*kwee
	fRate4() = preMPF*(k2_double_prime*ste9 + k2_prime + k2_triple_prime*slp1)
	fRate5() = (1 - ste9)*(k3_double_prime*slp1 + k3_prime)/(J3 - ste9 + 1)
	fRate6() = ste9*(M_phasepromotingfactor_ar*k4 + SK*k4_prime)/(J4 + ste9)
	fRate7() = (M_phasepromotingfactor_ar^4*k5_double_prime + k5_prime*(J5^4 + M_phasepromotingfactor_ar^4))/(J5^4 + M_phasepromotingfactor_ar^4)
	fRate9() = IEP*k7*slp1T/(J7 - slp1 + slp1T)
	fRate9m() = IEP*k7/(J7 - slp1 + slp1T)
	fRate10() = k8/(J8 + slp1)
	fRate12() = M_phasepromotingfactor_ar*k9/(-IEP + J9 + 1.0)
	fRate12m() = M_phasepromotingfactor_ar*k9/(-IEP + J9 + 1.0)
	fRate13() = k10/(IEP + J10)
	fRate15() = rum1T*(M_phasepromotingfactor_ar*k12_double_prime + SK*k12_prime + k12)
	fRate16() = TF*k13
	fRate18() = CellMass*mu
end functions
begin reaction rules
	R1: 0  -> Totalcdc13() fRate0() #Modifiers(M)
	R2_reactants_0: 0  -> Totalcdc13() -1*(fRate1()) #Modifiers(ste9, slp1)
	R3: 0  <-> preMPF() fRate2(),kwee #Modifiers(cdc13T)
	R4: preMPF() -> 0  k25
	R5_reactants_0: 0  -> preMPF() -1*(fRate4()) #Modifiers(ste9, slp1)
	R6_products_0: 0  -> ste9() fRate5() #Modifiers(slp1)
	R7_reactants_0: 0  -> ste9() -1*(fRate6()) #Modifiers(SK, MPF)
	R8: 0  -> slp1T() fRate7() #Modifiers(MPF)
	R9: slp1T() -> 0  k6
	R10: 0  <-> slp1() fRate9(),fRate9m() #Modifiers(IEP, slp1T)
	R11: slp1() -> 0  fRate10()
	R12: slp1() -> 0  k6
	R13: 0  <-> IEP() fRate12(),fRate12m() #Modifiers(MPF)
	R14: IEP() -> 0  fRate13()
	R15: 0  -> rum1T() k11
	R16_reactants_0: 0  -> rum1T() -1*(fRate15()) #Modifiers(SK, MPF)
	R17: 0  -> SK() fRate16()
	R18: SK() -> 0  k14
	R19: 0  -> CellMass() fRate18()
end reaction rules
end model
