###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL2451230486', 'http://identifiers.org/biomodels.db/BIOMD0000000125']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/16729058']
#@BQB_IS_VERSION_OF:['http://identifiers.org/obo.go/GO:0007166', 'http://identifiers.org/obo.go/GO:0051716', 'http://identifiers.org/obo.go/GO:0030159']
#@BQB_HAS_VERSION:['http://identifiers.org/obo.go/GO:0000165', 'http://identifiers.org/kegg.pathway/map04010']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/33154']
#@creatorEmail:'enuo@caltech.edu'
#@creatorName:'He Enuo'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 5 molecules and 7 reactions. The translated model has 3 molecules and 7 rules'
###
begin model
begin parameters
	a1 2.0
	a2 2.0
	b1 1.0
	b2 1.0
	d1 1.0
	d2x 1.0
	d2y 1.0
	x0 6.022e+23 # 1.0mol/L * 6.022e23/mol *1.0L
end parameters
begin molecule types
	y2()
	#^ bqbiol:hasVersion interpro:IPR003527
	x1()
	x2()
end molecule types
begin seed species
end seed species
begin observables
	Species x1 x1() #x1
	Species x2 x2() #x2
	Species y2 y2() #y2
end observables
begin functions
	fRate0() = a1*x0
	fRate1() = b1*y0
	fRate2() = a2*x1
	fRate3() = b2*x1
end functions
begin reaction rules
	reaction_0000001: 0  -> x1() fRate0() #Modifiers(x0)
	reaction_0000002: 0  -> x1() fRate1() #Modifiers(y0)
	reaction_0000003: 0  -> x2() fRate2() #Modifiers(x1)
	reaction_0000004: 0  -> y2() fRate3() #Modifiers(x1)
	reaction_0000005: x1() -> 0  d1
	reaction_0000006: x2() -> 0  d2x
	reaction_0000007: y2() -> 0  d2y
end reaction rules
end model
