###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000151', 'http://identifiers.org/biomodels.db/MODEL9750203466']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/16752369']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/pubmed/12773095', 'http://identifiers.org/biomodels.db/BIOMD0000000093', 'http://identifiers.org/biomodels.db/BIOMD0000000094', 'http://identifiers.org/biomodels.db/BIOMD0000000019']
#@BQB_OCCURS_IN:['http://identifiers.org/bto/BTO:0000575', 'http://identifiers.org/bto/BTO:0000759']
#@BQB_HAS_PART:['http://identifiers.org/go/GO:0007259', 'http://identifiers.org/go/GO:0000165', 'http://identifiers.org/kegg.pathway/mmu04010', 'http://identifiers.org/kegg.pathway/mmu04630']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/2759']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0070102']
#@creatorEmail:'hdharuri@cds.caltechedu'
#@creatorName:'Dharuri Harish'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 68 molecules and 72 reactions. The translated model has 31 molecules and 73 rules'
###
begin model
begin parameters
	IL6 0.38
	kf0 0.1
	kr0 0.05
	kf1 0.1
	kr1 0.05
	kf2 0.02
	kr2 0.02
	kf3 0.04
	kr3 0.2
	k4 0.005
	k10 0.003
	kf5 0.008
	kr5 0.8
	k6 0.4
	kf7 0.005
	kr7 0.5
	kf9 0.001
	kr9 0.2
	kf21 0.02
	kr21 0.1
	kf37 0.3
	kr37 0.0009
	kf39 0.3
	kr39 0.0009
	kf32 0.1
	kr32 0.000245
	k12 0.003
	kf13 2e-07
	kr13 0.2
	k17 0.05
	kf8 0.02
	kr8 0.1
	kf11 0.001
	kr11 0.2
	k14 0.005
	Vm 1.7
	Km 340.0
	kf34 6.0
	kr34 0.06
	kf60 0.5
	kr60 0.005
	kf15 0.001
	kr15 0.2
	kf61 0.2
	kr61 2e-07
	k16 0.005
	k18a 0.01
	k18b 400.0
	k19 0.001
	k22 0.0005
	k20 0.01
	k23 0.0005
	kf38 0.01
	kr38 0.55
	kf35 0.0015
	kr35 0.0045
	kf24 0.01
	kr24 0.55
	kf25 0.01
	kr25 0.0214
	kf40 0.03
	kr40 0.064
	kf26 0.015
	kr26 1.3
	kf31 0.023
	kr31 0.00022
	kf27 0.5
	kr27 0.0001
	kf28 0.001
	kr28 0.0053
	kf41 0.03
	kr41 0.0429
	kf33 0.3
	kr33 0.021
	kf30 0.0079
	kr30 0.4
	k43 1.0
	kf29 1.0
	kr29 0.0007
	kf42 0.0717
	kr42 0.2
	kf44 0.011
	kr44 0.001833
	k45 3.5
	kf46 0.011
	kr46 0.001833
	k51 0.058
	k49 0.058
	kf50 0.00025
	kr50 0.5
	k47 2.9
	kf48 0.0143
	kr48 0.8
	kf52 0.00011
	kr52 0.033
	k53 16.0
	kr54 0.033
	kf54 0.00011
	k55 6.7
	k59 0.3
	k57 0.27
	kf58 0.005
	kr58 0.5
	kf56 0.014
	kr56 0.6
	gp80_cytosol 4817600000000001.0 # (8.0 * 1e-09)mol/L * 6.022e23/mol *1.0L
	gp80 4817600000000001.0 # (8.0 * 1e-09)mol/L * 6.022e23/mol *1.0L
	gp130_cytosol 481760000000000.1 #original 0.8nano mole/L
	gp130 481760000000000.1 #original 0.8nano mole/L
end parameters
begin compartments
	#volume units: L
	cytosol 3 1.0
	nucleus 3 1.0
end compartments
begin molecule types
	#^ bqbiol:isVersionOf uniprot:P35235
	SHP2(ast~AST~0,grb2)
	#^ bqbiol:hasPart uniprot:P42227, uniprot:P52332, uniprot:Q6PDI9, uniprot:P08505, uniprot:P22272
	__IL6_gp80_gp130_JAK__ast2_STAT3C()
	#^ bqbiol:isVersionOf uniprot:O35718
	SOCS3()
	#^ bqbiol:hasPart uniprot:Q61411
	Ras_GTP(ast~AST~0,raf)
	PP1(stat3)
	#^ bqbiol:isVersionOf uniprot:Q60631
	Grb2(shp2,sos)
	Phosp2(mek)
	#^ bqbiol:hasPart uniprot:O35718, uniprot:P52332, uniprot:Q6PDI9, uniprot:P08505, uniprot:P22272
	__IL6_gp80_gp130_JAK__ast2_STAT3C_SOCS3()
	#^ bqbiol:hasPart uniprot:O35718, uniprot:P52332, uniprot:Q6PDI9, uniprot:P08505, uniprot:P22272
	__IL6_gp80_gp130_JAK__ast2_SOCS3()
	#^ bqbiol:hasPart uniprot:Q62245, uniprot:Q61411, uniprot:Q60631, uniprot:P35235, uniprot:P52332, uniprot:Q6PDI9, uniprot:P08505, uniprot:P22272
	__IL6_gp80_gp130_JAK__ast2_SHP2ast_Grb2_SOS_Ras_GDP()
	Mrna(_socs3c~_SOCS3C~0,_socs3n~_SOCS3N~0)
	#^ bqbiol:isVersionOf uniprot:Q99N57
	Raf(ast~AST~0,mek,phosp1,ras_gtp)
	#^ bqbiol:hasPart uniprot:P52332, uniprot:Q6PDI9, uniprot:P08505, uniprot:P22272
	__IL6_gp80_gp130_JAK__2()
	#^ bqbiol:hasPart uniprot:P35235, uniprot:P52332, uniprot:Q6PDI9, uniprot:P08505, uniprot:P22272
	__IL6_gp80_gp130_JAK__ast2_SHP2ast()
	#^ bqbiol:hasPart uniprot:P35235, uniprot:P52332, uniprot:Q6PDI9, uniprot:P08505, uniprot:P22272
	__IL6_gp80_gp130_JAK__ast2_JAK()
	#^ bqbiol:hasPart uniprot:Q60631, uniprot:P35235, uniprot:P52332, uniprot:Q6PDI9, uniprot:P08505, uniprot:P22272
	__IL6_gp80_gp130_JAK__ast2_SHP2ast_Grb2()
	#^ bqbiol:isVersionOf uniprot:P52332
	JAK(_ast~_AST~0,gp130_JAK~gp130_JAK~0,il6_gp80)
	#^ bqbiol:hasPart uniprot:O35718, uniprot:P42227, uniprot:P35235, uniprot:P52332, uniprot:Q6PDI9, uniprot:P08505, uniprot:P22272
	__IL6_gp80_gp130_JAK__ast2_STAT3C_SOCS3_SHP2()
	STAT3(ast~AST~0,ast2~AST~0,c~C~0,n~N~0,pp1,pp2,stat3)
	#^ bqbiol:hasPart uniprot:Q60631, uniprot:P35235, uniprot:P52332, uniprot:Q6PDI9, uniprot:P08505, uniprot:P22272
	__IL6_gp80_gp130_JAK__ast2_SHP2_Grb2()
	#^ bqbiol:hasPart uniprot:P42227, uniprot:P52332, uniprot:Q6PDI9, uniprot:P08505, uniprot:P22272
	__IL6_gp80_gp130_JAK__ast2_STAT3Cast()
	Phosp1(raf)
	#^ bqbiol:isVersionOf uniprot:Q3TMJ8
	MEK(_p~_P~0,erk,p~P~0,phosp2,raf)
	#^ bqbiol:isVersionOf uniprot:Q62245
	SOS(grb2)
	Phosp3(erk)
	#^ bqbiol:hasPart uniprot:Q62245, uniprot:Q61411, uniprot:Q60631, uniprot:P35235, uniprot:P52332, uniprot:Q6PDI9, uniprot:P08505, uniprot:P22272
	__IL6_gp80_gp130_JAK__ast2_SHP2ast_Grb2_SOS_Ras_GTP()
	PP2(stat3)
	#^ bqbiol:isVersionOf uniprot:P63085
	ERK(_p~_P~0,mek,p~P~0,phosp3)
	#^ bqbiol:hasPart uniprot:Q61411
	Ras_GDP()
	#^ bqbiol:hasPart uniprot:P08505, uniprot:P22272
	IL6_gp80(__IL6_gp80_gp130_JAK__ast2_STAT3C_SHP2~__IL6_gp80_gp130_JAK__ast2_STAT3C_SHP2~0,jak)
	#^ bqbiol:hasPart uniprot:P52332, uniprot:Q6PDI9, uniprot:P08505, uniprot:P22272
	__IL6_gp80_gp130_JAK___ast2()
end molecule types
begin seed species
	@cytosol:SHP2(ast~0,grb2)@cytosol 6.022000000000001e+16 #original 100.0nano mole/L  #SHP2 #x15
	@cytosol:STAT3(ast~0,ast2~0,c~C,n~0,pp1,pp2,stat3)@cytosol 6.022000000000001e+17 #original 1000.0nano mole/L  #STAT3C #x9
	@cytosol:PP1(stat3)@cytosol 3.0110000000000004e+16 #original 50.0nano mole/L  #PP1 #x17
	@nucleus:PP2(stat3)@nucleus 3.613200000000001e+16 #original 60.0nano mole/L  #PP2 #x23
	@cytosol:Grb2(shp2,sos)@cytosol 5.118700000000001e+16 #original 85.0nano mole/L  #Grb2 #x34
	@cytosol:Ras_GDP()@cytosol 1.1441800000000002e+19 #original 19000.0nano mole/L  #Ras_GDP #x36
	@cytosol:Raf(ast~0,mek,phosp1,ras_gtp)@cytosol 4.034740000000001e+16 #original 67.0nano mole/L  #Raf #x47
	@cytosol:Phosp1(raf)@cytosol 4.034740000000001e+16 #original 67.0nano mole/L  #Phosp1 #x50
	@cytosol:MEK(_p~0,erk,p~0,phosp2,raf)@cytosol 2.50918674e+19 #original 41667.0nano mole/L  #MEK #x53
	@cytosol:Phosp2(mek)@cytosol 4.034740000000001e+16 #original 67.0nano mole/L  #Phosp2 #x59
	@cytosol:ERK(_p~0,mek,p~0,phosp3)@cytosol 2.1077000000000004e+19 #original 35000.0nano mole/L  #ERK #x61
	@cytosol:SOS(grb2)@cytosol 2.04748e+16 #original 34.0nano mole/L  #SOS #x35
	@cytosol:JAK(_ast~0,gp130_JAK~0,il6_gp80)@cytosol 7226400000000001.0 #original 12.0nano mole/L  #JAK #x4
	@cytosol:Phosp3(erk)@cytosol 1.0036867400000002e+19 #original 16667.0nano mole/L  #Phosp3 #x66
end seed species
begin observables
	Species IL6_gp80_cytosol @cytosol:IL6_gp80(__IL6_gp80_gp130_JAK__ast2_STAT3C_SHP2~0,jak)@cytosol #IL6-gp80
	Species IL6_gp80_gp130_JAK_cytosol @cytosol:JAK(_ast~0,gp130_JAK~gp130_JAK,il6_gp80!224)@cytosol.IL6_gp80(__IL6_gp80_gp130_JAK__ast2_STAT3C_SHP2~0,jak!224)@cytosol #IL6-gp80-gp130-JAK
	Species gp130_JAK_cytosol @cytosol:JAK(_ast~0,gp130_JAK~gp130_JAK,il6_gp80)@cytosol #gp130-JAK
	Species __IL6_gp80_gp130_JAK__2_cytosol @cytosol:__IL6_gp80_gp130_JAK__2()@cytosol #(IL6-gp80-gp130-JAK)2
	Species __IL6_gp80_gp130_JAK___ast2_cytosol @cytosol:__IL6_gp80_gp130_JAK___ast2()@cytosol #(IL6-gp80-gp130-JAK)_ast2
	Species __IL6_gp80_gp130_JAK__ast2_JAK_cytosol @cytosol:__IL6_gp80_gp130_JAK__ast2_JAK()@cytosol #(IL6-gp80-gp130-JAK)ast2-JAK
	Species SHP2_cytosol @cytosol:SHP2(ast~0,grb2)@cytosol #SHP2
	Species STAT3C_cytosol @cytosol:STAT3(ast~0,ast2~0,c~C,n~0,pp1,pp2,stat3)@cytosol #STAT3C
	Species __IL6_gp80_gp130_JAK__ast2_STAT3C_cytosol @cytosol:__IL6_gp80_gp130_JAK__ast2_STAT3C()@cytosol #(IL6-gp80-gp130-JAK)ast2-STAT3C
	Species STAT3Cast_cytosol @cytosol:STAT3(ast~AST,ast2~0,c~C,n~0,pp1,pp2,stat3)@cytosol #STAT3Cast
	Species __IL6_gp80_gp130_JAK__ast2_STAT3Cast_cytosol @cytosol:__IL6_gp80_gp130_JAK__ast2_STAT3Cast()@cytosol #(IL6-gp80-gp130-JAK)ast2-STAT3Cast
	Species SOCS3_cytosol @cytosol:SOCS3()@cytosol #SOCS3
	Species __IL6_gp80_gp130_JAK__ast2_SOCS3_cytosol @cytosol:__IL6_gp80_gp130_JAK__ast2_SOCS3()@cytosol #(IL6-gp80-gp130-JAK)ast2-SOCS3
	Species __IL6_gp80_gp130_JAK__ast2_SHP2ast_cytosol @cytosol:__IL6_gp80_gp130_JAK__ast2_SHP2ast()@cytosol #(IL6-gp80-gp130-JAK)ast2-SHP2ast
	Species SHP2ast_cytosol @cytosol:SHP2(ast~AST,grb2)@cytosol #SHP2ast
	Species __IL6_gp80_gp130_JAK__ast2_SHP2ast_Grb2_cytosol @cytosol:__IL6_gp80_gp130_JAK__ast2_SHP2ast_Grb2()@cytosol #(IL6-gp80-gp130-JAK)ast2-SHP2ast-Grb2
	Species SHP2ast_Grb2_cytosol @cytosol:SHP2(ast~AST,grb2!220)@cytosol.Grb2(shp2!220,sos)@cytosol #SHP2ast-Grb2
	Species __IL6_gp80_gp130_JAK__ast2_SHP2_Grb2_cytosol @cytosol:__IL6_gp80_gp130_JAK__ast2_SHP2_Grb2()@cytosol #(IL6-gp80-gp130-JAK)ast2-SHP2-Grb2
	Species SHP2ast_Grb2_SOS_cytosol @cytosol:Grb2(shp2!220,sos!64)@cytosol.SHP2(ast~AST,grb2!220)@cytosol.SOS(grb2!64)@cytosol #SHP2ast-Grb2-SOS
	Species PP1_STAT3Cast_cytosol @cytosol:STAT3(ast~AST,ast2~0,c~C,n~0,pp1!225,pp2,stat3)@cytosol.PP1(stat3!225)@cytosol #PP1-STAT3Cast
	Species PP1_cytosol @cytosol:PP1(stat3)@cytosol #PP1
	Species STAT3C_STAT3Cast_cytosol @cytosol:STAT3(ast~0,ast2~0,c~C,n~0,pp1,pp2,stat3!227)@cytosol.STAT3(ast~AST,ast2~0,c~C,n~0,pp1,pp2,stat3!227)@cytosol #STAT3C-STAT3Cast
	Species STAT3N_nucleus @nucleus:STAT3(ast~0,ast2~0,c~0,n~N,pp1,pp2,stat3)@nucleus #STAT3N
	Species __IL6_gp80_gp130_JAK__ast2_STAT3C_SOCS3_SHP2_cytosol @cytosol:__IL6_gp80_gp130_JAK__ast2_STAT3C_SOCS3_SHP2()@cytosol #(IL6-gp80-gp130-JAK)ast2-STAT3C-SOCS3-SHP2
	Species STAT3Cast_STAT3Cast_cytosol @cytosol:STAT3(ast~0,ast2~0,c~C,n~0,pp1,pp2,stat3!227)@cytosol.STAT3(ast~AST,ast2~AST,c~C,n~0,pp1,pp2,stat3!227)@cytosol #STAT3Cast-STAT3Cast
	Species STAT3Nast_STAT3Nast_nucleus @nucleus:STAT3(ast~AST,ast2~0,c~0,n~N,pp1,pp2,stat3!227)@nucleus.STAT3(ast~AST,ast2~0,c~0,n~N,pp1,pp2,stat3!227)@nucleus #STAT3Nast-STAT3Nast
	Species STAT3Nast_nucleus @nucleus:STAT3(ast~AST,ast2~0,c~0,n~N,pp1,pp2,stat3)@nucleus #STAT3Nast
	Species PP2_nucleus @nucleus:PP2(stat3)@nucleus #PP2
	Species PP2_STAT3Nast_STAT3Nast_nucleus @nucleus:STAT3(ast~AST,ast2~0,c~0,n~N,pp1,pp2!226,stat3!227)@nucleus.STAT3(ast~AST,ast2~0,c~0,n~N,pp1,pp2,stat3!227)@nucleus.PP2(stat3!226)@nucleus #PP2-STAT3Nast-STAT3Nast
	Species STAT3N_STAT3Nast_nucleus @nucleus:STAT3(ast~0,ast2~0,c~0,n~N,pp1,pp2,stat3!227)@nucleus.STAT3(ast~AST,ast2~0,c~0,n~N,pp1,pp2,stat3!227)@nucleus #STAT3N-STAT3Nast
	Species Mrna_SOCS3N_nucleus @nucleus:Mrna(_socs3c~0,_socs3n~_SOCS3N)@nucleus #Mrna-SOCS3N
	Species Grb2_cytosol @cytosol:Grb2(shp2,sos)@cytosol #Grb2
	Species Ras_GDP_cytosol @cytosol:Ras_GDP()@cytosol #Ras-GDP
	Species __IL6_gp80_gp130_JAK__ast2_SHP2ast_Grb2_SOS_Ras_GDP_cytosol @cytosol:__IL6_gp80_gp130_JAK__ast2_SHP2ast_Grb2_SOS_Ras_GDP()@cytosol #(IL6-gp80-gp130-JAK)ast2-SHP2ast-Grb2-SOS-Ras-GDP
	Species Ras_GTP_cytosol @cytosol:Ras_GTP(ast~0,raf)@cytosol #Ras-GTP
	Species Raf_cytosol @cytosol:Raf(ast~0,mek,phosp1,ras_gtp)@cytosol #Raf
	Species Raf_Ras_GTP_cytosol @cytosol:Raf(ast~0,mek,phosp1,ras_gtp!26)@cytosol.Ras_GTP(ast~0,raf!26)@cytosol #Raf-Ras-GTP
	Species Rafast_Phosp1_cytosol @cytosol:Raf(ast~AST,mek,phosp1!223,ras_gtp)@cytosol.Phosp1(raf!223)@cytosol #Rafast-Phosp1
	Species Rafast_cytosol @cytosol:Raf(ast~AST,mek,phosp1,ras_gtp)@cytosol #Rafast
	Species Phosp1_cytosol @cytosol:Phosp1(raf)@cytosol #Phosp1
	Species MEK_cytosol @cytosol:MEK(_p~0,erk,p~0,phosp2,raf)@cytosol #MEK
	Species MEK_Rafast_cytosol @cytosol:MEK(_p~0,erk,p~0,phosp2,raf!27)@cytosol.Raf(ast~AST,mek!27,phosp1,ras_gtp)@cytosol #MEK-Rafast
	Species MEK_P_cytosol @cytosol:MEK(_p~_P,erk,p~0,phosp2,raf)@cytosol #MEK-P
	Species MEK_P_Phosp2_cytosol @cytosol:MEK(_p~_P,erk,p~0,phosp2!221,raf)@cytosol.Phosp2(mek!221)@cytosol #MEK-P-Phosp2
	Species Phosp2_cytosol @cytosol:Phosp2(mek)@cytosol #Phosp2
	Species MEK_PP_cytosol @cytosol:MEK(_p~_P,erk,p~P,phosp2,raf)@cytosol #MEK-PP
	Species ERK_cytosol @cytosol:ERK(_p~0,mek,p~0,phosp3)@cytosol #ERK
	Species ERK_MEK_PP_cytosol @cytosol:MEK(_p~_P,erk!32,p~P,phosp2,raf)@cytosol.ERK(_p~0,mek!32,p~0,phosp3)@cytosol #ERK-MEK-PP
	Species ERK_P_cytosol @cytosol:ERK(_p~_P,mek,p~0,phosp3)@cytosol #ERK-P
	Species ERK_PP_cytosol @cytosol:ERK(_p~_P,mek,p~P,phosp3)@cytosol #ERK-PP
	Species ERK_P_Phosp3_cytosol @cytosol:ERK(_p~_P,mek,p~0,phosp3!222)@cytosol.Phosp3(erk!222)@cytosol #ERK-P-Phosp3
	Species SOS_cytosol @cytosol:SOS(grb2)@cytosol #SOS
	Species PP2_STAT3Nast_nucleus @nucleus:STAT3(ast~AST,ast2~0,c~0,n~N,pp1,pp2!226,stat3)@nucleus.PP2(stat3!226)@nucleus #PP2-STAT3Nast
	Species __IL6_gp80_gp130_JAK__ast2_STAT3C_SOCS3_cytosol @cytosol:__IL6_gp80_gp130_JAK__ast2_STAT3C_SOCS3()@cytosol #(IL6-gp80-gp130-JAK)ast2-STAT3C-SOCS3
	Species MEK_P_Rafast_cytosol @cytosol:MEK(_p~_P,erk,p~0,phosp2,raf!27)@cytosol.Raf(ast~AST,mek!27,phosp1,ras_gtp)@cytosol #MEK-P-Rafast
	Species __IL6_gp80_gp130_JAK__ast2_SHP2ast_Grb2_SOS_Ras_GTP_cytosol @cytosol:__IL6_gp80_gp130_JAK__ast2_SHP2ast_Grb2_SOS_Ras_GTP()@cytosol #(IL6-gp80-gp130-JAK)ast2-SHP2ast-Grb2-SOS-Ras-GTP
	Species MEK_PP_Phosp2_cytosol @cytosol:MEK(_p~_P,erk,p~P,phosp2!221,raf)@cytosol.Phosp2(mek!221)@cytosol #MEK-PP-Phosp2
	Species JAK_cytosol @cytosol:JAK(_ast~0,gp130_JAK~0,il6_gp80)@cytosol #JAK
	Species Mrna_SOCS3C_nucleus @nucleus:Mrna(_socs3c~_SOCS3C,_socs3n~0)@nucleus #Mrna-SOCS3C
	Species Ras_GTPast_cytosol @cytosol:Ras_GTP(ast~AST,raf)@cytosol #Ras-GTPast
	Species __IL6_gp80_gp130_JAK__ast2_STAT3C_SHP2_cytosol @cytosol:IL6_gp80(__IL6_gp80_gp130_JAK__ast2_STAT3C_SHP2~__IL6_gp80_gp130_JAK__ast2_STAT3C_SHP2,jak)@cytosol #(IL6-gp80-gp130-JAK)ast2-STAT3C-SHP2
	Species ERK_P_MEK_PP_cytosol @cytosol:MEK(_p~_P,erk!32,p~P,phosp2,raf)@cytosol.ERK(_p~_P,mek!32,p~0,phosp3)@cytosol #ERK-P-MEK-PP
	Species PP1_STAT3Cast_STAT3Cast_cytosol @cytosol:STAT3(ast~AST,ast2~0,c~C,n~0,pp1!225,pp2,stat3!227)@cytosol.STAT3(ast~AST,ast2~0,c~C,n~0,pp1,pp2,stat3!227)@cytosol.PP1(stat3!225)@cytosol #PP1-STAT3Cast-STAT3Cast
	Species Grb2_SOS_cytosol @cytosol:Grb2(shp2,sos!64)@cytosol.SOS(grb2!64)@cytosol #Grb2-SOS
	Species Phosp3_cytosol @cytosol:Phosp3(erk)@cytosol #Phosp3
	Species ERK_PP_Phosp3_cytosol @cytosol:ERK(_p~_P,mek,p~P,phosp3!222)@cytosol.Phosp3(erk!222)@cytosol #ERK-PP-Phosp3
end observables
begin functions
	fRate0() = IL6*gp80_cytosol*kf0
	fRate3() = gp130_cytosol*kf1
	fRate21() = -2*STAT3Cast_STAT3Cast_cytosol*kr8 + 2*STAT3Cast_cytosol^2*kf8
	fRate27() = Vm/(Km + SHP2ast_cytosol)
	fRate35() = STAT3Nast_STAT3Nast_nucleus*k18a/(STAT3Nast_STAT3Nast_nucleus + k18b)
	fRate38() = Mrna_SOCS3C_nucleus*k20
end functions
begin reaction rules
	R1: 0  -> IL6_gp80(__IL6_gp80_gp130_JAK__ast2_STAT3C_SHP2~0,jak)@cytosol fRate0() #Modifiers(x1)
	R2: IL6_gp80(__IL6_gp80_gp130_JAK__ast2_STAT3C_SHP2~0,jak)@cytosol -> 0  kr0
	R3: JAK(_ast~0,gp130_JAK~gp130_JAK,il6_gp80!224)@cytosol.IL6_gp80(__IL6_gp80_gp130_JAK__ast2_STAT3C_SHP2~0,jak!224)@cytosol <-> JAK(_ast~0,gp130_JAK~gp130_JAK,il6_gp80)@cytosol + IL6_gp80(__IL6_gp80_gp130_JAK__ast2_STAT3C_SHP2~0,jak)@cytosol kr2,kf2
	R5: JAK(_ast~0,gp130_JAK~0,il6_gp80)@cytosol <-> JAK(_ast~0,gp130_JAK~gp130_JAK,il6_gp80)@cytosol fRate3(),kr1 #Modifiers(x3)
	R7: JAK(_ast~0,gp130_JAK~gp130_JAK,il6_gp80!224)@cytosol.IL6_gp80(__IL6_gp80_gp130_JAK__ast2_STAT3C_SHP2~0,jak!224)@cytosol + JAK(_ast~0,gp130_JAK~gp130_JAK,il6_gp80!224)@cytosol.IL6_gp80(__IL6_gp80_gp130_JAK__ast2_STAT3C_SHP2~0,jak!224)@cytosol -> __IL6_gp80_gp130_JAK__2()@cytosol kf3
	R8: __IL6_gp80_gp130_JAK__2()@cytosol -> JAK(_ast~0,gp130_JAK~gp130_JAK,il6_gp80!224)@cytosol.IL6_gp80(__IL6_gp80_gp130_JAK__ast2_STAT3C_SHP2~0,jak!224)@cytosol + JAK(_ast~0,gp130_JAK~gp130_JAK,il6_gp80!224)@cytosol.IL6_gp80(__IL6_gp80_gp130_JAK__ast2_STAT3C_SHP2~0,jak!224)@cytosol kr3
	R9: __IL6_gp80_gp130_JAK__2()@cytosol -> __IL6_gp80_gp130_JAK___ast2()@cytosol k4
	R10: __IL6_gp80_gp130_JAK__ast2_JAK()@cytosol -> SHP2(ast~0,grb2)@cytosol + __IL6_gp80_gp130_JAK__2()@cytosol k10
	R11: STAT3(ast~0,ast2~0,c~C,n~0,pp1,pp2,stat3)@cytosol + __IL6_gp80_gp130_JAK___ast2()@cytosol <-> __IL6_gp80_gp130_JAK__ast2_STAT3C()@cytosol kf5,kr5
	R12: __IL6_gp80_gp130_JAK__ast2_STAT3C()@cytosol -> STAT3(ast~AST,ast2~0,c~C,n~0,pp1,pp2,stat3)@cytosol + __IL6_gp80_gp130_JAK___ast2()@cytosol k6
	R13: STAT3(ast~AST,ast2~0,c~C,n~0,pp1,pp2,stat3)@cytosol + __IL6_gp80_gp130_JAK___ast2()@cytosol <-> __IL6_gp80_gp130_JAK__ast2_STAT3Cast()@cytosol kf7,kr7
	R14: SHP2(ast~0,grb2)@cytosol + __IL6_gp80_gp130_JAK___ast2()@cytosol <-> __IL6_gp80_gp130_JAK__ast2_JAK()@cytosol kf9,kr9
	R15: SOCS3()@cytosol + __IL6_gp80_gp130_JAK___ast2()@cytosol <-> __IL6_gp80_gp130_JAK__ast2_SOCS3()@cytosol kf21,kr21
	R16: __IL6_gp80_gp130_JAK__ast2_SHP2ast()@cytosol <-> SHP2(ast~AST,grb2)@cytosol + __IL6_gp80_gp130_JAK___ast2()@cytosol kf37,kr37
	R16a: __IL6_gp80_gp130_JAK__ast2_SHP2ast_Grb2()@cytosol <-> SHP2(ast~AST,grb2!220)@cytosol.Grb2(shp2!220,sos)@cytosol + __IL6_gp80_gp130_JAK___ast2()@cytosol kf39,kr39
	R17: __IL6_gp80_gp130_JAK__ast2_SHP2_Grb2()@cytosol <-> Grb2(shp2!220,sos!64)@cytosol.SHP2(ast~AST,grb2!220)@cytosol.SOS(grb2!64)@cytosol + __IL6_gp80_gp130_JAK___ast2()@cytosol kf32,kr32
	R18: STAT3(ast~AST,ast2~0,c~C,n~0,pp1!225,pp2,stat3)@cytosol.PP1(stat3!225)@cytosol -> PP1(stat3)@cytosol + STAT3(ast~0,ast2~0,c~C,n~0,pp1,pp2,stat3)@cytosol k12
	R19: STAT3(ast~AST,ast2~0,c~C,n~0,pp1,pp2,stat3)@cytosol + STAT3(ast~0,ast2~0,c~C,n~0,pp1,pp2,stat3)@cytosol <-> STAT3(ast~0,ast2~0,c~C,n~0,pp1,pp2,stat3!227)@cytosol.STAT3(ast~AST,ast2~0,c~C,n~0,pp1,pp2,stat3!227)@cytosol kf13,kr13
	R20: STAT3(ast~0,ast2~0,c~0,n~N,pp1,pp2,stat3)@nucleus -> STAT3(ast~0,ast2~0,c~C,n~0,pp1,pp2,stat3)@cytosol k17
	R21: __IL6_gp80_gp130_JAK__ast2_SOCS3()@cytosol + STAT3(ast~0,ast2~0,c~C,n~0,pp1,pp2,stat3)@cytosol <-> __IL6_gp80_gp130_JAK__ast2_STAT3C_SOCS3()@cytosol kf5,kr5
	R22: __IL6_gp80_gp130_JAK__ast2_STAT3C_SOCS3_SHP2()@cytosol -> SOCS3()@cytosol + SHP2(ast~0,grb2)@cytosol + STAT3(ast~0,ast2~0,c~C,n~0,pp1,pp2,stat3)@cytosol + __IL6_gp80_gp130_JAK__2()@cytosol k10
	R23_reactants_0: 0  -> STAT3(ast~AST,ast2~0,c~C,n~0,pp1,pp2,stat3)@cytosol -1*(fRate21())
	R23_products_0: 0  -> STAT3(ast~0,ast2~0,c~C,n~0,pp1,pp2,stat3!227)@cytosol.STAT3(ast~AST,ast2~AST,c~C,n~0,pp1,pp2,stat3!227)@cytosol 0.5*fRate21()
	R24: PP1(stat3)@cytosol + STAT3(ast~AST,ast2~0,c~C,n~0,pp1,pp2,stat3)@cytosol <-> STAT3(ast~AST,ast2~0,c~C,n~0,pp1!225,pp2,stat3)@cytosol.PP1(stat3!225)@cytosol kf11,kr11
	R25: PP1(stat3)@cytosol + STAT3(ast~0,ast2~0,c~C,n~0,pp1,pp2,stat3!227)@cytosol.STAT3(ast~AST,ast2~AST,c~C,n~0,pp1,pp2,stat3!227)@cytosol <-> STAT3(ast~AST,ast2~0,c~C,n~0,pp1!225,pp2,stat3!227)@cytosol.STAT3(ast~AST,ast2~0,c~C,n~0,pp1,pp2,stat3!227)@cytosol.PP1(stat3!225)@cytosol kf11,kr11
	R26: STAT3(ast~0,ast2~0,c~C,n~0,pp1,pp2,stat3!227)@cytosol.STAT3(ast~AST,ast2~AST,c~C,n~0,pp1,pp2,stat3!227)@cytosol -> STAT3(ast~AST,ast2~0,c~0,n~N,pp1,pp2,stat3!227)@nucleus.STAT3(ast~AST,ast2~0,c~0,n~N,pp1,pp2,stat3!227)@nucleus k14
	R27: STAT3(ast~AST,ast2~0,c~C,n~0,pp1!225,pp2,stat3!227)@cytosol.STAT3(ast~AST,ast2~0,c~C,n~0,pp1,pp2,stat3!227)@cytosol.PP1(stat3!225)@cytosol -> PP1(stat3)@cytosol + STAT3(ast~0,ast2~0,c~C,n~0,pp1,pp2,stat3!227)@cytosol.STAT3(ast~AST,ast2~0,c~C,n~0,pp1,pp2,stat3!227)@cytosol k12
	R28: __IL6_gp80_gp130_JAK__ast2_STAT3C_SOCS3()@cytosol + SHP2(ast~0,grb2)@cytosol <-> __IL6_gp80_gp130_JAK__ast2_STAT3C_SOCS3_SHP2()@cytosol kf9,kr9
	R29: SHP2(ast~AST,grb2)@cytosol -> SHP2(ast~0,grb2)@cytosol fRate27()
	R30: __IL6_gp80_gp130_JAK__ast2_JAK()@cytosol <-> __IL6_gp80_gp130_JAK__ast2_SHP2ast()@cytosol kf34,kr34
	R31: STAT3(ast~AST,ast2~0,c~0,n~N,pp1,pp2,stat3!227)@nucleus.STAT3(ast~AST,ast2~0,c~0,n~N,pp1,pp2,stat3!227)@nucleus <-> STAT3(ast~AST,ast2~0,c~0,n~N,pp1,pp2,stat3)@nucleus + STAT3(ast~AST,ast2~0,c~0,n~N,pp1,pp2,stat3)@nucleus kr8,kf8
	R32: PP2(stat3)@nucleus + STAT3(ast~AST,ast2~0,c~0,n~N,pp1,pp2,stat3!227)@nucleus.STAT3(ast~AST,ast2~0,c~0,n~N,pp1,pp2,stat3!227)@nucleus <-> STAT3(ast~AST,ast2~0,c~0,n~N,pp1,pp2!226,stat3!227)@nucleus.STAT3(ast~AST,ast2~0,c~0,n~N,pp1,pp2,stat3!227)@nucleus.PP2(stat3!226)@nucleus kf15,kr15
	R33: PP2(stat3)@nucleus + STAT3(ast~AST,ast2~0,c~0,n~N,pp1,pp2,stat3)@nucleus <-> STAT3(ast~AST,ast2~0,c~0,n~N,pp1,pp2!226,stat3)@nucleus.PP2(stat3!226)@nucleus kf15,kr15
	R34: STAT3(ast~0,ast2~0,c~0,n~N,pp1,pp2,stat3!227)@nucleus.STAT3(ast~AST,ast2~0,c~0,n~N,pp1,pp2,stat3!227)@nucleus <-> STAT3(ast~0,ast2~0,c~0,n~N,pp1,pp2,stat3)@nucleus + STAT3(ast~AST,ast2~0,c~0,n~N,pp1,pp2,stat3)@nucleus kr13,kf13
	R35: STAT3(ast~AST,ast2~0,c~0,n~N,pp1,pp2!226,stat3)@nucleus.PP2(stat3!226)@nucleus -> PP2(stat3)@nucleus + STAT3(ast~0,ast2~0,c~0,n~N,pp1,pp2,stat3)@nucleus k16
	R36: STAT3(ast~AST,ast2~0,c~0,n~N,pp1,pp2!226,stat3!227)@nucleus.STAT3(ast~AST,ast2~0,c~0,n~N,pp1,pp2,stat3!227)@nucleus.PP2(stat3!226)@nucleus -> STAT3(ast~0,ast2~0,c~0,n~N,pp1,pp2,stat3!227)@nucleus.STAT3(ast~AST,ast2~0,c~0,n~N,pp1,pp2,stat3!227)@nucleus + PP2(stat3)@nucleus k16
	R37: 0  -> Mrna(_socs3c~0,_socs3n~_SOCS3N)@nucleus fRate35() #Modifiers(x20)
	R38: Mrna(_socs3c~0,_socs3n~_SOCS3N)@nucleus -> Mrna(_socs3c~_SOCS3C,_socs3n~0)@nucleus k19
	R39: Mrna(_socs3c~_SOCS3C,_socs3n~0)@nucleus -> 0  k22
	R40: 0  -> SOCS3()@cytosol fRate38() #Modifiers(x26)
	R41: SOCS3()@cytosol -> 0  k23
	R42: __IL6_gp80_gp130_JAK__ast2_STAT3C_SOCS3_SHP2()@cytosol -> IL6_gp80(__IL6_gp80_gp130_JAK__ast2_STAT3C_SHP2~__IL6_gp80_gp130_JAK__ast2_STAT3C_SHP2,jak)@cytosol + SOCS3()@cytosol k23
	R43: SHP2(ast~AST,grb2)@cytosol + Grb2(shp2,sos)@cytosol <-> SHP2(ast~AST,grb2!220)@cytosol.Grb2(shp2!220,sos)@cytosol kf38,kr38
	R44: Grb2(shp2,sos!64)@cytosol.SOS(grb2!64)@cytosol <-> SOS(grb2)@cytosol + Grb2(shp2,sos)@cytosol kf35,kr35
	R45: __IL6_gp80_gp130_JAK__ast2_SHP2ast()@cytosol + Grb2(shp2,sos)@cytosol <-> __IL6_gp80_gp130_JAK__ast2_SHP2ast_Grb2()@cytosol kf24,kr24
	R46: __IL6_gp80_gp130_JAK__ast2_SHP2ast_Grb2()@cytosol + SOS(grb2)@cytosol <-> __IL6_gp80_gp130_JAK__ast2_SHP2_Grb2()@cytosol kf25,kr25
	R47: SHP2(ast~AST,grb2!220)@cytosol.Grb2(shp2!220,sos)@cytosol + SOS(grb2)@cytosol <-> Grb2(shp2!220,sos!64)@cytosol.SHP2(ast~AST,grb2!220)@cytosol.SOS(grb2!64)@cytosol kf40,kr40
	R48: __IL6_gp80_gp130_JAK__ast2_SHP2_Grb2()@cytosol + Ras_GDP()@cytosol <-> __IL6_gp80_gp130_JAK__ast2_SHP2ast_Grb2_SOS_Ras_GDP()@cytosol kf26,kr26
	R49: __IL6_gp80_gp130_JAK__ast2_SHP2ast_Grb2_SOS_Ras_GTP()@cytosol <-> __IL6_gp80_gp130_JAK__ast2_SHP2_Grb2()@cytosol + Ras_GDP()@cytosol kf31,kr31
	R50: __IL6_gp80_gp130_JAK__ast2_SHP2ast_Grb2_SOS_Ras_GDP()@cytosol <-> __IL6_gp80_gp130_JAK__ast2_SHP2_Grb2()@cytosol + Ras_GTP(ast~0,raf)@cytosol kf27,kr27
	R51: Raf(ast~0,mek,phosp1,ras_gtp)@cytosol + Ras_GTP(ast~0,raf)@cytosol <-> Raf(ast~0,mek,phosp1,ras_gtp!26)@cytosol.Ras_GTP(ast~0,raf!26)@cytosol kf28,kr28
	R52: __IL6_gp80_gp130_JAK__ast2_SHP2ast()@cytosol + Grb2(shp2,sos!64)@cytosol.SOS(grb2!64)@cytosol <-> __IL6_gp80_gp130_JAK__ast2_SHP2_Grb2()@cytosol kf41,kr41
	R53: Grb2(shp2!220,sos!64)@cytosol.SHP2(ast~AST,grb2!220)@cytosol.SOS(grb2!64)@cytosol <-> SHP2(ast~AST,grb2)@cytosol + Grb2(shp2,sos!64)@cytosol.SOS(grb2!64)@cytosol kf33,kr33
	R54: Ras_GTP(ast~AST,raf)@cytosol + __IL6_gp80_gp130_JAK__ast2_SHP2_Grb2()@cytosol <-> __IL6_gp80_gp130_JAK__ast2_SHP2ast_Grb2_SOS_Ras_GTP()@cytosol kf30,kr30
	R55: Raf(ast~AST,mek,phosp1!223,ras_gtp)@cytosol.Phosp1(raf!223)@cytosol -> Raf(ast~0,mek,phosp1,ras_gtp)@cytosol + Phosp1(raf)@cytosol k43
	R56: Raf(ast~0,mek,phosp1,ras_gtp!26)@cytosol.Ras_GTP(ast~0,raf!26)@cytosol <-> Raf(ast~AST,mek,phosp1,ras_gtp)@cytosol + Ras_GTP(ast~AST,raf)@cytosol kf29,kr29
	R57: Raf(ast~AST,mek,phosp1,ras_gtp)@cytosol + Phosp1(raf)@cytosol <-> Raf(ast~AST,mek,phosp1!223,ras_gtp)@cytosol.Phosp1(raf!223)@cytosol kf42,kr42
	R58: MEK(_p~0,erk,p~0,phosp2,raf)@cytosol + Raf(ast~AST,mek,phosp1,ras_gtp)@cytosol <-> MEK(_p~0,erk,p~0,phosp2,raf!27)@cytosol.Raf(ast~AST,mek!27,phosp1,ras_gtp)@cytosol kf44,kr44
	R59: MEK(_p~0,erk,p~0,phosp2,raf!27)@cytosol.Raf(ast~AST,mek!27,phosp1,ras_gtp)@cytosol -> MEK(_p~_P,erk,p~0,phosp2,raf)@cytosol + Raf(ast~AST,mek,phosp1,ras_gtp)@cytosol k45
	R60: MEK(_p~_P,erk,p~0,phosp2,raf)@cytosol + Raf(ast~AST,mek,phosp1,ras_gtp)@cytosol <-> MEK(_p~_P,erk,p~0,phosp2,raf!27)@cytosol.Raf(ast~AST,mek!27,phosp1,ras_gtp)@cytosol kf46,kr46
	R61: MEK(_p~_P,erk,p~0,phosp2!221,raf)@cytosol.Phosp2(mek!221)@cytosol -> Phosp2(mek)@cytosol + MEK(_p~0,erk,p~0,phosp2,raf)@cytosol k51
	R62: MEK(_p~_P,erk,p~P,phosp2!221,raf)@cytosol.Phosp2(mek!221)@cytosol -> Phosp2(mek)@cytosol + MEK(_p~_P,erk,p~0,phosp2,raf)@cytosol k49
	R63: Phosp2(mek)@cytosol + MEK(_p~_P,erk,p~0,phosp2,raf)@cytosol <-> MEK(_p~_P,erk,p~0,phosp2!221,raf)@cytosol.Phosp2(mek!221)@cytosol kf50,kr50
	R64: MEK(_p~_P,erk,p~0,phosp2,raf!27)@cytosol.Raf(ast~AST,mek!27,phosp1,ras_gtp)@cytosol -> Raf(ast~AST,mek,phosp1,ras_gtp)@cytosol + MEK(_p~_P,erk,p~P,phosp2,raf)@cytosol k47
	R65: Phosp2(mek)@cytosol + MEK(_p~_P,erk,p~P,phosp2,raf)@cytosol <-> MEK(_p~_P,erk,p~P,phosp2!221,raf)@cytosol.Phosp2(mek!221)@cytosol kf48,kr48
	R66: ERK(_p~0,mek,p~0,phosp3)@cytosol + MEK(_p~_P,erk,p~P,phosp2,raf)@cytosol <-> MEK(_p~_P,erk!32,p~P,phosp2,raf)@cytosol.ERK(_p~0,mek!32,p~0,phosp3)@cytosol kf52,kr52
	R67: MEK(_p~_P,erk!32,p~P,phosp2,raf)@cytosol.ERK(_p~0,mek!32,p~0,phosp3)@cytosol -> ERK(_p~_P,mek,p~0,phosp3)@cytosol + MEK(_p~_P,erk,p~P,phosp2,raf)@cytosol k53
	R68: MEK(_p~_P,erk!32,p~P,phosp2,raf)@cytosol.ERK(_p~_P,mek!32,p~0,phosp3)@cytosol <-> ERK(_p~_P,mek,p~0,phosp3)@cytosol + MEK(_p~_P,erk,p~P,phosp2,raf)@cytosol kr54,kf54
	R69: MEK(_p~_P,erk!32,p~P,phosp2,raf)@cytosol.ERK(_p~_P,mek!32,p~0,phosp3)@cytosol -> ERK(_p~_P,mek,p~P,phosp3)@cytosol + MEK(_p~_P,erk,p~P,phosp2,raf)@cytosol k55
	R70: ERK(_p~_P,mek,p~0,phosp3!222)@cytosol.Phosp3(erk!222)@cytosol -> Phosp3(erk)@cytosol + ERK(_p~0,mek,p~0,phosp3)@cytosol k59
	R71: ERK(_p~_P,mek,p~P,phosp3!222)@cytosol.Phosp3(erk!222)@cytosol -> Phosp3(erk)@cytosol + ERK(_p~_P,mek,p~0,phosp3)@cytosol k57
	R72: Phosp3(erk)@cytosol + ERK(_p~_P,mek,p~0,phosp3)@cytosol <-> ERK(_p~_P,mek,p~0,phosp3!222)@cytosol.Phosp3(erk!222)@cytosol kf58,kr58
	R73: Phosp3(erk)@cytosol + ERK(_p~_P,mek,p~P,phosp3)@cytosol <-> ERK(_p~_P,mek,p~P,phosp3!222)@cytosol.Phosp3(erk!222)@cytosol kf56,kr56
end reaction rules
end model
