###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000195', 'http://identifiers.org/biomodels.db/MODEL3897475441']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/11371178']
#@BQB_IS_VERSION_OF:['http://identifiers.org/reactome/REACT_152.2', 'http://identifiers.org/go/GO:0051726', 'http://identifiers.org/kegg.pathway/map04111']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/4932']
#@creatorEmail:'lukas@ebi.ac.uk'
#@creatorName:'Endler Lukas'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 11 molecules and 20 reactions. The translated model has 8 molecules and 20 rules'
###
begin model
begin parameters
	k1 0.04
	k2p 0.04
	k2pp 1.0
	k2ppp 1.0
	k3p 1.0
	k3pp 10.0
	J3 0.04
	k4 35.0
	k5p 0.005
	k5pp 0.2
	J5 0.3
	k6 0.1
	n 4.0
	k7 1.0
	J7 0.001
	k8 0.5
	J8 0.001
	k9 0.1
	k10 0.02
	mu 0.005
	k11 1.0
	k12p 0.2
	k12pp 50.0
	mmax 10.0
	k12ppp 100.0
	Keq 1000.0
	k13 1.0
	k14 1.0
	k15p 1.5
	k15pp 0.05
	k16p 1.0
	k16pp 3.0
	J15 0.01
	J16 0.01
	k4p 2.0
	J4 0.04
end parameters
begin molecule types
	#^ bqbiol:isVersionOf uniprot:P26309
	Cdc20t()
	#^ bqbiol:isVersionOf go:GO:0016049
	m()
	#^ bqbiol:isVersionOf uniprot:P53197
	Cdh1()
	#^ bqbiol:isVersionOf uniprot:P26309
	Cdc20a()
	#^ bqbiol:isVersionOf uniprot:P20437, uniprot:P20438, interpro:IPR014399
	SK()
	#^ bqbiol:hasPart uniprot:P00546, interpro:IPR015454
	CycB(CycBt~CycBt~0,Trimer~Trimer~0)
	#^ bqbiol:isVersionOf uniprot:P38634
	CKIt()
	IEP()
end molecule types
begin seed species
	CycB(CycBt~CycBt,Trimer~0) 0.001 #CycBt #CycBt
	Cdc20a() 0.001 #Cdc20a #Cdc20a
	Cdh1() 0.001 #Cdh1 #Cdh1
	m() 0.5 #m #m
	Cdc20t() 0.001 #Cdc20t #Cdc20t
	IEP() 0.001 #IEP #IEP
	CKIt() 0.001 #CKIt #CKIt
	SK() 0.001 #SK #SK
end seed species
begin observables
	Species CycBt CycB(CycBt~CycBt,Trimer~0) #CycBt
	Species CycB CycB(CycBt~0,Trimer~0) #CycB
	Species Cdc20a Cdc20a() #Cdc20a
	Species Trimer CycB(CycBt~0,Trimer~Trimer) #Trimer
	Species Cdh1 Cdh1() #Cdh1
	Species m m() #m
	Species Cdc20t Cdc20t() #Cdc20t
	Species IEP IEP() #IEP
	Species CKIt CKIt() #CKIt
	Species SK SK() #SK
end observables
begin functions
	CycB_ar() = -2*CKIt*CycBt/(CKIt + CycBt + sqrt(-4*CKIt*CycBt + (CKIt + CycBt + 1/Keq)^2) + 1/Keq) + CycBt
	TF() = 2*J16*(SK*k15pp + k15p*m)/(CycB_ar*k16pp*m + J15*(CycB_ar*k16pp*m + k16p) - J16*(SK*k15pp + k15p*m)*(4*CycB_ar*k16pp*m - 4*SK*k15pp - 4*k15p*m + 4*k16p)/2 + J16*(SK*k15pp + k15p*m) - SK*k15pp - k15p*m + k16p + (CycB_ar*k16pp*m + J15*(CycB_ar*k16pp*m + k16p) + J16*(SK*k15pp + k15p*m) - SK*k15pp - k15p*m + k16p)^2/2)
	Mad_ar() = 1
	Trimer_ar() = 2*CKIt*CycBt/(CKIt + CycBt + sqrt(-4*CKIt*CycBt + (CKIt + CycBt + 1/Keq)^2) + 1/Keq)
	fRate2() = Cdh1*k2pp
	fRate3() = Cdc20a*k2ppp
	fRate4() = (1 - Cdh1)*(Cdc20a*k3pp + k3p)/(-Cdh1 + J3 + 1)
	fRate5() = (Cdh1*CycB_ar*k4*m + Cdh1*SK*k4p)/(Cdh1 + J4)
	fRate6() = (k5p*((CycB_ar*m/J5)^n + 1.0) + k5pp*(CycB_ar*m/J5)^n)/((CycB_ar*m/J5)^n + 1.0)
	fRate8() = Cdc20t*IEP*k7/(-Cdc20a + Cdc20t + J7)
	fRate8m() = IEP*k7/(-Cdc20a + Cdc20t + J7)
	fRate9() = Mad_ar*k8/(Cdc20a + J8)
	fRate11() = CycB_ar*k9*m
	fRate11m() = CycB_ar*k9*m
	fRate13() = m*mu
	fRate13m() = m*mu/mmax
	fRate16() = SK*k12pp
	fRate17() = CycB_ar*k12ppp*m
	fRate18() = TF*k13
end functions
begin reaction rules
	CycBt_synthesis: 0  -> CycB(CycBt~CycBt,Trimer~0) k1
	CycBdegradation: CycB(CycBt~CycBt,Trimer~0) -> 0  k2p
	CycBdegradationviaCdh1: CycB(CycBt~CycBt,Trimer~0) -> 0  fRate2() #Modifiers(Cdh1)
	CycBtdegradationviaCdc20a: CycB(CycBt~CycBt,Trimer~0) -> 0  fRate3() #Modifiers(Cdc20a)
	Cdh1synthesis_products_0: 0  -> Cdh1() fRate4() #Modifiers(Cdc20a)
	Cdh1degradation_reactants_0: 0  -> Cdh1() -1*(fRate5()) #Modifiers(SK, m, CycB)
	Cdc20tsynthesis: 0  -> Cdc20t() fRate6() #Modifiers(CycB, m)
	Cdc20t_deg: Cdc20t() -> 0  k6
	Cdc20activation: 0  <-> Cdc20a() fRate8(),fRate8m() #Modifiers(Cdc20t, IEP)
	Cdc20ainhibition: Cdc20a() -> 0  fRate9() #Modifiers(Mad)
	Cdc20adegradation: Cdc20a() -> 0  k6
	IEPsynthesis: 0  <-> IEP() fRate11(),fRate11m() #Modifiers(m, CycB)
	IEPdegradation: IEP() -> 0  k10
	growth: 0  <-> m() fRate13(),fRate13m()
	CKItsynthesis: 0  -> CKIt() k11
	CKIdegradation: CKIt() -> 0  k12p
	CKItphosphorilationviaSK: CKIt() -> 0  fRate16() #Modifiers(SK)
	eq_7: CKIt() -> 0  fRate17() #Modifiers(m, CycB)
	SKsynthesis: 0  -> SK() fRate18()
	SKdegradation: SK() -> 0  k14
end reaction rules
end model
