###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000205', 'http://identifiers.org/biomodels.db/MODEL7802538336']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/18505685']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/pubmed/14751248', 'http://identifiers.org/pubmed/11024454', 'http://identifiers.org/biomodels.db/BIOMD0000000049', 'http://identifiers.org/biomodels.db/BIOMD0000000019', 'http://identifiers.org/pubmed/16687399', 'http://identifiers.org/biomodels.db/BIOMD0000000048']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0007173', 'http://identifiers.org/go/GO:0006897']
#@BQB_IS_PART_OF:['http://identifiers.org/kegg.pathway/hsa04070', 'http://identifiers.org/kegg.pathway/hsa04010']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/2759']
#@creatorEmail:'hdharuri@cds.caltech.edu'
#@creatorName:'Dharuri Harish'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 194 molecules and 205 reactions. The translated model has 131 molecules and 205 rules'
###
begin model
begin parameters
	r1_k1 100.000000
	r1_k2 0.003800
	r2_k1 10.000000
	r2_k2 0.020000
	r3_k1 2.014000
	r4_k1 3.140000
	r4_k2 0.200000
	r5_k1 0.266100
	r6_k1 90.000000
	r6_k2 0.600000
	r7_k1 0.583800
	r8_k1 4.481000
	r8_k2 0.300000
	r9_k1 3.114000
	r9_k2 0.200000
	r10_k1 0.266100
	r11_k1 3.000000
	r11_k2 0.100000
	r12_k1 10.000000
	r12_k2 0.021400
	r13_k1 0.100000
	r13_k2 0.001500
	r14_k1 10.000000
	r14_k2 0.045000
	r15_k1 202.900000
	r15_k2 0.180000
	r16_k1 0.143400
	r17_k1 3.000000
	r17_k2 0.050000
	r18_k1 10.000000
	r18_k2 0.060000
	r19_k1 2.734000
	r19_k2 0.025000
	r20_k1 202.900000
	r20_k2 0.180000
	r21_k1 0.143400
	r22_k1 1.754000
	r22_k2 0.050000
	r23_k1 0.762400
	r24_k1 4.000000
	r24_k2 0.018330
	r25_k1 3.500000
	r26_k1 4.000000
	r26_k2 0.018330
	r27_k1 2.900000
	r28_k1 3.000000
	r28_k2 0.033000
	r29_k1 16.000000
	r30_k1 3.000000
	r30_k2 0.033000
	r31_k1 5.700000
	r32_k1 71.700000
	r32_k2 0.200000
	r33_k1 1.000000
	r34_k1 14.300000
	r34_k2 0.800000
	r35_k1 0.058000
	r36_k1 0.250000
	r36_k2 0.500000
	r37_k1 0.058000
	r38_k1 7.000000
	r38_k2 0.600000
	r39_k1 0.270000
	r40_k1 5.000000
	r40_k2 0.500000
	r41_k1 0.300000
	r42_k1 0.000017
	r43_k1 2.854000
	r43_k2 0.960000
	r44_k1 7.600000
	r45_k1 8.898000
	r45_k2 0.100000
	r46_k1 0.426000
	r47_k1 8.898000
	r47_k2 0.100000
	r48_k1 0.426000
	r49_k1 0.002000
	r50_k1 14.000000
	r50_k2 0.174300
	r51_k1 33.720000
	r52_k1 1.000000
	r52_k2 0.038000
	r53_k1 0.595000
	r54_k1 25.000000
	r54_k2 3.500000
	r55_k1 25.000000
	r56_k1 3.000000
	r56_k2 1.000000
	r57_k1 3.000000
	r57_k2 1.000000
	r58_k1 3.000000
	r59_k1 0.001000
	r59_k2 10.000000
	r60_k1 1.000000
	r60_k2 0.900000
	r61_k1 0.001000
	r62_k1 3.000000
	r62_k2 0.500000
	r63_k1 3.000000
	r64_k1 0.001000
	r65_k1 1.100000
	r65_k2 0.033000
	r66_k1 16.000000
	r67_k1 5.000000
	r67_k2 0.500000
	r68_k1 5.000000
	r69_k1 0.129800
	r70_k1 17.000000
	r71_k1 10.000000
	r71_k2 0.021400
	r72_k1 2.029000
	r72_k2 0.180000
	r73_k1 0.143400
	r74_k1 2.845000
	r74_k2 0.960000
	r75_k1 0.262000
	r76_k1 2.845000
	r76_k2 0.960000
	r77_k1 1.205000
	r78_k1 20.290000
	r78_k2 0.180000
	r79_k1 20.290000
	r79_k2 0.180000
	r80_k1 4.980000
	r81_k1 0.262000
	r82_k1 0.100000
	r82_k2 0.010000
	r83_k1 2.854000
	r83_k2 0.960000
	r84_k1 7.760000
	r85_k1 10.000000
	r85_k2 1.000000
	r86_k1 10.000000
	r86_k2 1.000000
	r87_k1 2.661000
	r88_k1 2.661000
	r89_k1 3.114000
	r89_k2 0.200000
	r90_k1 2.661000
	r91_k1 3.114000
	r91_k2 0.200000
	r92_k1 2.661000
	r93_k1 3.114000
	r93_k2 0.200000
	r94_k1 2.661000
	r95_k1 3.114000
	r95_k2 0.200000
	r96_k1 2.661000
	r97_k1 3.114000
	r97_k2 0.200000
	r98_k1 2.661000
	r99_k1 40.000000
	r99_k2 0.935600
	r100_k1 10.000000
	r101_k1 0.129800
	r102_k1 40.000000
	r102_k2 0.935600
	r103_k1 10.000000
	r104_k1 2.845000
	r104_k2 0.960000
	r105_k1 1.205000
	r106_k1 1.754000
	r106_k2 0.500000
	r107_k1 7.624000
	r108_k1 40.000000
	r108_k2 0.935600
	r109_k1 40.000000
	r110_k1 0.001000
	r110_k2 0.000330
	r111_k1 1.000000
	r111_k2 1.000000
	r112_k1 0.010000
	r113_k1 0.100000
	r113_k2 1.298700
	r114_k1 0.500000
	r114_k2 0.005000
	r115_k1 0.500000
	r115_k2 0.005000
	r116_k1 5.000000
	r116_k2 0.010000
	r117_k1 5.000000
	r117_k2 0.010000
	r118_k1 0.001000
	r119_k1 0.001000
	r120_k1 0.005000
	r121_k1 1.100000
	r121_k2 0.033000
	r122_k1 16.000000
	r123_k1 10.000000
	r123_k2 0.005000
	r124_k1 129.800000
	r125_k1 1.754000
	r125_k2 0.050000
	r126_k1 0.076240
	r127_k1 8.898000
	r127_k2 1.000000
	r128_k1 0.426000
	r129_k1 3.000000
	r129_k2 0.050000
	r130_k1 3.000000
	r130_k2 0.100000
	r131_k1 3.000000
	r131_k2 0.500000
	r132_k1 5.000000
	r132_k2 1.670000
	r133_k1 1.693000
	r134_k1 1.693000
	r135_k1 1.670000
	r135_k2 5.000000
	r136_k1 5.000000
	r136_k2 1.670000
	r137_k1 1.693000
	r138_k1 1.693000
	r139_k1 1.670000
	r139_k2 5.000000
	r140_k1 1.667000
	r140_k2 0.500000
	r141_k1 5.000000
	r141_k2 1.670000
	r142_k1 1.693000
	r143_k1 1.693000
	r144_k1 1.670000
	r144_k2 5.000000
	r145_k1 1.667000
	r145_k2 0.500000
	r146_k1 5.000000
	r146_k2 1.670000
	r147_k1 1.693000
	r148_k1 1.693000
	r149_k1 1.670000
	r149_k2 5.000000
	r150_k1 1.667000
	r150_k2 0.500000
	r151_k1 5.000000
	r151_k2 1.670000
	r152_k1 1.693000
	r153_k1 1.693000
	r154_k1 1.670000
	r154_k2 5.000000
	r155_k1 1.667000
	r155_k2 0.500000
	r156_k1 5.000000
	r156_k2 1.670000
	r157_k1 1.693000
	r158_k1 1.693000
	r159_k1 1.670000
	r159_k2 5.000000
	r160_k1 5.000000
	r160_k2 1.670000
	r161_k1 0.100200
	r162_k1 0.100200
	r163_k1 1.670000
	r164_k1 5.000000
	r164_k2 1.670000
	r165_k1 0.100200
	r166_k1 0.100200
	r167_k1 1.670000
	r168_k1 1.667000
	r168_k2 0.500000
	r169_k1 5.000000
	r169_k2 1.670000
	r170_k1 1.693000
	r171_k1 1.693000
	r172_k1 1.670000
	r172_k2 5.000000
	r173_k1 1.667000
	r173_k2 0.500000
	r174_k1 5.000000
	r174_k2 1.670000
	r175_k1 1.693000
	r176_k1 1.693000
	r177_k1 1.670000
	r177_k2 5.000000
	r178_k1 16.670000
	r178_k2 0.050000
	r179_k1 16.670000
	r179_k2 0.050000
	r180_k1 16.670000
	r180_k2 0.050000
	r181_k1 16.670000
	r181_k2 0.050000
	r182_k1 5.000000
	r182_k2 1.670000
	r183_k1 0.100200
	r184_k1 0.100200
	r185_k1 1.670000
	r186_k1 5.000000
	r186_k2 1.670000
	r187_k1 0.100200
	r188_k1 0.100200
	r189_k1 1.670000
	r190_k1 5.000000
	r190_k2 1.670000
	r191_k1 0.100200
	r192_k1 0.100200
	r193_k1 1.670000
	r194_k1 5.000000
	r194_k2 1.670000
	r195_k1 0.100200
	r196_k1 0.100200
	r197_k1 1.670000
	r198_k1 1.667000
	r198_k2 0.500000
	r199_k1 1.205000
	r200_k1 1.667000
	r200_k2 0.500000
	r201_k1 1.205000
	r202_k1 1.667000
	r202_k2 0.500000
	r203_k1 1.205000
	r204_k1 1.667000
	r204_k2 0.500000
	r205_k1 1.205000
end parameters
begin molecule types
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:Q02750, uniprot:P28482
	EGF_pEGFR_2_Grb2_MEKK1abppMEKcERKdef()
	#^ bqbiol:isVersionOf uniprot:Q06124
	SHP2()
	#^ bqbiol:hasPart chebi:CHEBI:15996, uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:P62070, uniprot:Q13233
	EGF_pEGFR_2_Grb2_MEKK1abcdefRasGTP()
	#^ bqbiol:hasPart chebi:CHEBI:15996, uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:P62070, uniprot:Q02750, uniprot:Q13233
	EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdefRasGTP()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:P04049, uniprot:Q02750
	EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbMEKcdef()
	#^ bqbiol:isVersionOf uniprot:P07522
	EGF(egfr)
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:Q02750, uniprot:P61586
	EGF_pEGFR_2_Grb2_MEKK1abMEKcdRhoGTPef()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P12931
	EGF_pEGFR_2_Src()
	RasG(dp~DP~0,egf_pegff_2,raf,rasgap,rhogef,tp~TP~0)
	#^ bqbiol:hasPart chebi:CHEBI:15996, uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:P62070, uniprot:Q02750, uniprot:P28482
	EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcppERKdefRasGTP()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:P04049, uniprot:Q02750, uniprot:P61586
	EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcdRhoGTPepRhoGAPf()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:Q02750, uniprot:P61586
	EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdRhoGTPef()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:P04049
	EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbcdef()
	MPase(epn)
	#^ bqbiol:is chebi:CHEBI:16618
	PIP3(akt,pten,racgef)
	RhoG(dp~DP~0,rhogap,rhogdi,rhogef,rok,tp~TP~0)
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:Q07889, uniprot:P28482
	ppERK_EGF_pEGFR_2_pShc_Grb2_SOS()
	TP7(src)
	#^ bqbiol:hasPart chebi:CHEBI:15996, uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:P62070, uniprot:Q02750, uniprot:Q13233
	EGF_pEGFR_2_Grb2_MEKK1abppMEKcdefRasGTP()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:Q02750, uniprot:Q13233
	EGF_pEGFR_2_Grb2_MEKK1abppMEKcdef()
	#^ bqbiol:hasPart chebi:CHEBI:15996, uniprot:P07522, uniprot:P62993, uniprot:P62070, uniprot:Q02750, uniprot:P28482
	EGF_pEGFR_2_Grb2_MEKK1abppMEKcppERKdefRasGTP()
	#^ bqbiol:hasPart chebi:CHEBI:15996, uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:P62070, uniprot:Q02750, uniprot:P28482
	EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcpERKdefRasGTP()
	RacG(dp~DP~0,racgap,rhogdi,tp~TP~0)
	#^ bqbiol:hasPart uniprot:P07522
	EGF_pEGFF_2(EGF_pEGFR2_RasGAP~EGF_pEGFR2_RasGAP~0,EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPef~EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPef~0,EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPef~EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPef~0,EGF_pEGRF_2~EGF_pEGRF_2~0,_~_~0,rasg)
	#^ bqbiol:hasPart chebi:CHEBI:16618, uniprot:P04049, uniprot:P31749
	pRaf_pAkt_PIP3()
	#^ bqbiol:hasPart chebi:CHEBI:15996, uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:P62070, uniprot:Q02750, uniprot:Q13233
	EGF_pEGFR_2_Grb2_MEKK1abMEKcdefRasGTP()
	#^ bqbiol:hasPart uniprot:Q96B97, uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:Q07889
	EGF_pEGFR_2_Grb2_SOS_Cbl_CIN85()
	#^ bqbiol:hasPart chebi:CHEBI:15996, uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:P62070, uniprot:Q02750, uniprot:P28482
	EGF_pEGFR_2_Grb2_MEKK1abppMEKcERKdefRasGTP()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:Q02750, uniprot:Q13233
	EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdef()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:Q06124, uniprot:P62993
	EGF_pEGFR_2_Grb2_SHP2_pRhoGAP()
	#^ bqbiol:hasPart chebi:CHEBI:15996, uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:P62070, uniprot:Q02750, uniprot:P28482, uniprot:Q13233
	EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcERKdefRasGTP()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:P04049, uniprot:Q02750, uniprot:Q13233
	EGF_pEGFR_2_Grb2_MEKK1aRafbpMEKcdef()
	#^ bqbiol:isVersionOf uniprot:Q9NZN5
	RhoGEF(p~P~0,rasg,rhog,src)
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:P04049, uniprot:Q02750, uniprot:Q13233
	EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbMEKcdef()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:Q06124, uniprot:P20936
	EGF_pEGFR_2_RasGAP_SHP2()
	#^ bqbiol:is uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:Q02750, uniprot:P28482
	EGF_pEGFR_2_Grb2_MEKK1abppMEKcppERKdef()
	RhoGAP(p~P~0,rhog,src)
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:P04049, uniprot:Q02750
	EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbpMEKcdef()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:Q02750, uniprot:P28482
	EGF_pEGFR_2_Grb2_MEKK1abppMEKcpERKdef()
	#^ bqbiol:is uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:P04049, uniprot:Q02750
	EGF_pEGFR_2_Grb2_MEKK1apRafbMEKcdef()
	#^ bqbiol:isVersionOf uniprot:P20936
	RasGAP(rasg)
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:P04049, uniprot:Q02750, uniprot:P28482
	EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcpERKdef()
	#^ bqbiol:isVersionOf uniprot:P62993
	Grb2(mekk1abcdef,sos)
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P61586, uniprot:P98077, uniprot:P62993, uniprot:P04049
	EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPepRhoGAPf()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:Q02750, uniprot:Q13233
	EGF_pEGFR_2_Grb2_MEKK1abMEKcdef()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522
	EGF_pEGFR_2()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:P04049
	EGF_pEGFR_2_Grb2_MEKK1apRafbcdef()
	#^ bqbiol:isVersionOf uniprot:P98077
	Shc(p~P~0,shp)
	Pase(raf)
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P61586, uniprot:P62993, uniprot:P04049
	EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPepRhoGAPf()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993
	EGF_pEGFR_2_pShc_Grb2()
	#^ bqbiol:isVersionOf uniprot:Q8WYR1
	PI3K(p~P~0,pip2,tp4)
	#^ bqbiol:hasPart chebi:CHEBI:15996, uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:P62070, uniprot:Q13233
	EGF_pEGFR_2_pShc_Grb2_MEKK1abcdefRasGTP()
	#^ bqbiol:isVersionOf uniprot:Q96B97
	Cbl_CIN85()
	#^ bqbiol:isVersionOf uniprot:P60484
	PTEN(p~P~0,pip3,rok)
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:P04049, uniprot:Q02750
	EGF_pEGFR_2_Grb2_MEKK1apRafbppMEKcdef()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:P04049, uniprot:Q02750, uniprot:Q13233
	EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcdef()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:Q02750, uniprot:P28482
	EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcppERKdef()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:P04049, uniprot:Q02750, uniprot:P28482
	EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcERKdef()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:P04049, uniprot:Q02750, uniprot:P28482
	EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcpERKdef()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:P04049, uniprot:Q02750, uniprot:P61586
	EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbMEKcdRhoGTPef()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:P04049, uniprot:Q02750, uniprot:P28482
	EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcppERKdef()
	#^ bqbiol:isVersionOf uniprot:O15530
	PDK1()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:Q06124, uniprot:P98077, uniprot:P62993
	EGF_pEGFR_2_pShc_Grb2_SHP2_pRhoGAP()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:P04049, uniprot:Q02750, uniprot:P28482
	EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcppERKdef()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P62993
	EGF_pEGFR_2_Grb2()
	#^ bqbiol:isVersionOf uniprot:Q99962
	EPn(mpase,p~P~0,rok)
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:P04049, uniprot:Q02750, uniprot:Q13233
	EGF_pEGFR_2_Grb2_MEKK1aRafbMEKcdef()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522
	EGF_EGFR_2()
	#^ bqbiol:isVersionOf uniprot:Q06124
	SHP(shc)
	#^ bqbiol:isVersionOf uniprot:Q07889
	SOS(grb2,p~P~0)
	#^ bqbiol:hasPart uniprot:Q96B97, uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:Q07889
	EGF_pEGFR_2_pShc_Grb2_SOS_Cbl_CIN85()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:Q8WYR1
	EGF_pEGFR_2_PI3K()
	Takt()
	#^ bqbiol:isVersionOf uniprot:P28482
	ERK(mek,mkp3,p~P~0,phospho~PP~0,rok)
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:Q07889
	EGF_pEGFR_2_pShc_Grb2_SOS()
	#^ bqbiol:isVersionOf uniprot:Q15052
	RacGEF(pip3)
	#^ bqbiol:hasPart chebi:CHEBI:15996, uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:P62070, uniprot:Q02750, uniprot:Q13233
	EGF_pEGFR_2_pShc_Grb2_MEKK1abpMEKcdefRasGTP()
	#^ bqbiol:isVersionOf uniprot:P12931
	Src(p~P~0,rhogap,rhogef,tp7)
	#^ bqbiol:isVersionOf uniprot:P04049
	Raf(mek,p~P~0,pase,phospho~PP~0,pp~PP~0,rasg)
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P98077
	EGF_pEGFR_2_Shc()
	#^ bqbiol:hasPart chebi:CHEBI:17552, uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:Q07889, uniprot:P62070
	EGF_pEGFR_2_Grb2_SOS_RasGDP()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:Q13233
	EGF_pEGFR_2_Grb2_MEKK1abcdef()
	#^ bqbiol:isVersionOf uniprot:P35813
	PP2A(mek)
	RacGAP(racg)
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:Q07889
	EGF_pEGFR_2_Grb2_SOS()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:Q06124, uniprot:P98077, uniprot:P62993
	EGF_pEGFR_2_pShc_Grb2_SHP2()
	#^ bqbiol:hasPart uniprot:P98077, uniprot:P62993, uniprot:Q07889
	pShc_Grb2_SOS()
	#^ bqbiol:hasPart chebi:CHEBI:17552, uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:Q07889, uniprot:P62070
	EGF_pEGFR_2_pShc_Grb2_SOS_RasGDP()
	#^ bqbiol:hasPart uniprot:Q96B97, uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:Q07889, uniprot:Q99962
	EGF_pEGFR_2_Grb2_SOS_Cbl_CIN85_EPn()
	#^ bqbiol:hasPart chebi:CHEBI:16618, uniprot:P31749
	pAkt_PIP3_Takt()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P98077, uniprot:P62993, uniprot:Q13233
	EGF_pEGFR_2_pShc_Grb2_MEKK1abcdef()
	#^ bqbiol:isVersionOf uniprot:Q02750
	MEK(erk,p~P~0,phospho~PP~0,pp2a,raf)
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:Q02750, uniprot:Q13233
	EGF_pEGFR_2_Grb2_MEKK1abpMEKcdef()
	#^ bqbiol:hasPart chebi:CHEBI:15996, uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:P62070, uniprot:Q02750, uniprot:P28482
	EGF_pEGFR_2_Grb2_MEKK1abppMEKcpERKdefRasGTP()
	#^ bqbiol:isVersionOf uniprot:Q13464
	ROK(epn,erk,p~P~0,pten,rhog)
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P98077
	EGF_pEGFR_2_pShc()
	#^ bqbiol:isVersionOf uniprot:P31749
	Akt(p~P~0,pip3)
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:P04049, uniprot:Q02750, uniprot:P28482
	EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcpERKdef()
	#^ bqbiol:hasPart chebi:CHEBI:16618, uniprot:P31749, uniprot:O15530
	Akt_PIP3_PDK1()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:Q07889, uniprot:P28482
	ppERK_EGF_pEGFR_2_Grb2_SOS()
	#^ bqbiol:isVersionOf uniprot:Q13233
	MEKK1abcdef(grb2)
	#^ bqbiol:hasPart chebi:CHEBI:15996, uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:P62070, uniprot:Q02750, uniprot:Q13233
	EGF_pEGFR_2_Grb2_MEKK1abpMEKcdefRasGTP()
	TP4(pi3k)
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:Q06124, uniprot:P62993, uniprot:Q9NZN5
	EGF_pEGFR_2_Grb2_SHP2_pRhoGEF()
	#^ bqbiol:hasPart chebi:CHEBI:17552, chebi:CHEBI:16618, uniprot:P63000, uniprot:Q15052
	PIP3_RacGEF_RacGDP()
	#^ bqbiol:isVersionOf uniprot:P52565
	RhoGDI(racg,rhog)
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:P04049, uniprot:Q02750, uniprot:P28482
	EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcERKdef()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:Q06124
	EGF_pEGFR_2_SHP()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:P04049, uniprot:Q02750
	EGF_pEGFR_2_Grb2_MEKK1apRafbpMEKcdef()
	#^ bqbiol:isVersionOf uniprot:Q9QX70
	EGFR(egf,p~P~0,pro_~PRO_~0)
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:Q02750, uniprot:P61586
	EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdRhoGTPef()
	#^ bqbiol:isVersionOf uniprot:Q16828
	MKP3(erk)
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:P04049, uniprot:Q02750
	EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbppMEKcdef()
	EGF_pEGFR_2_degrade()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:P04049, uniprot:Q02750, uniprot:P61586
	EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcdRhoGTPepRhoGAPf()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:Q02750, uniprot:P61586
	EGF_pEGFR_2_Grb2_MEKK1abppMEKcdRhoGTPef()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:P04049, uniprot:Q02750, uniprot:P28482
	EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcERKdef()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:Q06124, uniprot:P98077, uniprot:P62993, uniprot:Q9NZN5
	EGF_pEGFR_2_pShc_Grb2_SHP2_pRhoGEF()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:P04049, uniprot:Q13233
	EGF_pEGFR_2_Grb2_MEKK1aRafbcdef()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:Q06124, uniprot:P62993
	EGF_pEGFR_2_Grb2_SHP2()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:P04049, uniprot:Q02750, uniprot:Q13233
	EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbpMEKcdef()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P62993, uniprot:P04049, uniprot:Q02750
	EGF_pEGFR_2_Grb2_MEKK1aRafbMEKcdRhoGTPef()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:Q02750, uniprot:Q13233
	EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdef()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:Q13233
	EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdef()
	#^ bqbiol:is chebi:CHEBI:16152
	PIP2(pi3k)
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:Q02750, uniprot:Q13233
	EGF_pEGFR_2_pShc_Grb2_MEKK1abpMEKcdef()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:P04049, uniprot:Q02750, uniprot:Q13233
	EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcdef()
	#^ bqbiol:hasPart uniprot:Q9QX70, uniprot:P07522, uniprot:P12931
	EGF_pEGFR_2_pSrc()
	#^ bqbiol:hasPart chebi:CHEBI:15996, uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:P62070, uniprot:Q02750, uniprot:Q13233
	EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdefRasGTP()
	#^ bqbiol:hasPart uniprot:Q96B97, uniprot:Q9QX70, uniprot:P07522, uniprot:P98077, uniprot:P62993, uniprot:Q07889, uniprot:Q99962
	EGF_pEGFR_2_pShc_Grb2_SOS_Cbl_CIN85_EPn()
end molecule types
begin seed species
	EGF(egfr) 4936052740000000.0 # (0.0081967 * 1e-06)mol/L * 6.022e23/mol *1.0L #EGF #species_0
	EGFR(egf,p~0,pro_~0) 1.8066e+17 #original 0.3/L  #EGFR #species_1
	SHP(shc) 6.022e+16 #original 0.1/L  #SHP #species_5
	Shc(p~0,shp) 6.022e+17 #original 1.0/L  #Shc #species_7
	Grb2(mekk1abcdef,sos) 6.022e+17 #original 1.0/L  #Grb2 #species_12
	SOS(grb2,p~0) 1.8066e+17 #original 0.3/L  #SOS #species_14
	RasG(dp~DP,egf_pegff_2,raf,rasgap,rhogef,tp~0) 9.033e+16 #original 0.15/L  #RasGDP #species_17
	Raf(mek,p~0,pase,phospho~0,pp~0,rasg) 3.011e+17 #original 0.5/L  #Raf #species_23
	MEK(erk,p~0,phospho~0,pp2a,raf) 4.0949600000000006e+17 #original 0.68/L  #MEK #species_26
	ERK(mek,mkp3,p~0,phospho~0,rok) 2.4088e+17 #original 0.4/L  #ERK #species_31
	Pase(raf) 3.011e+17 #original 0.5/L  #Pase #species_36
	PP2A(mek) 1.2044e+16 #original 0.02/L  #PP2A #species_38
	MKP3(erk) 1204400000000000.2 #original 0.002/L  #MKP3 #species_41
	RasGAP(rasg) 6.022e+16 #original 0.1/L  #RasGAP #species_44
	PI3K(p~0,pip2,tp4) 6022000000000000.0 #original 0.01/L  #PI3K #species_49
	TP4(pi3k) 1.2044e+17 #original 0.2/L  #TP4 #species_53
	PIP2(pi3k) 3.011e+17 #original 0.5/L  #PIP2 #species_55
	PIP3(akt,pten,racgef) 3.011e+17 #original 0.5/L  #PIP3 #species_57
	Akt(p~0,pip3) 6.022e+16 #original 0.1/L  #Akt #species_58
	PDK1() 6.022e+16 #original 0.1/L  #PDK1 #species_60
	Takt() 6.022e+16 #original 0.1/L  #Takt #species_64
	PTEN(p~0,pip3,rok) 6.022e+16 #original 0.1/L  #PTEN #species_69
	RacGEF(pip3) 6.022e+16 #original 0.1/L  #RacGEF #species_73
	RacG(dp~DP,racgap,rhogdi,tp~0) 1.2044e+17 #original 0.2/L  #RacGDP #species_75
	RhoGDI(racg,rhog) 6.022e+16 #original 0.1/L  #RhoGDI #species_78
	RacGAP(racg) 6.022e+16 #original 0.1/L  #RacGAP #species_80
	RhoG(dp~DP,rhogap,rhogdi,rhogef,rok,tp~0) 9.033e+16 #original 0.15/L  #RhoGDP #species_82
	SHP2() 6.022e+16 #original 0.1/L  #SHP2 #species_90
	RhoGEF(p~0,rasg,rhog,src) 6.022e+16 #original 0.1/L  #RhoGEF #species_94
	RhoGAP(p~0,rhog,src) 3.011e+17 #original 0.5/L  #RhoGAP #species_97
	ROK(epn,erk,p~0,pten,rhog) 4.0949600000000006e+17 #original 0.68/L  #ROK #species_105
	Src(p~0,rhogap,rhogef,tp7) 3.119396e+17 #original 0.518/L  #Src #species_107
	TP7(src) 3.119396e+17 #original 0.518/L  #TP7 #species_111
	Cbl_CIN85() 4.8176e+17 #original 0.8/L  #Cbl_CIN85 #species_114
	EPn(mpase,p~0,rok) 3.011e+17 #original 0.5/L  #EPn #species_117
	EGFR(egf,p~0,pro_~PRO_) 1.8066e+21 #original 3000.0/L  #Pro_EGFR #species_122
	MPase(epn) 6.022e+17 #original 1.0/L  #MPase #species_125
	MEKK1abcdef(grb2) 3.011e+17 #original 0.5/L  #MEKK1abcdef #species_130
end seed species
begin observables
	Species EGF EGF(egfr) #EGF
	Species EGFR EGFR(egf,p~0,pro_~0) #EGFR
	Species EGF_EGFR EGFR(egf!24,p~0,pro_~0).EGF(egfr!24) #EGF-EGFR
	Species EGF_EGFR_2 EGF_EGFR_2() #EGF-EGFR-2
	Species EGF_pEGFR_2 EGF_pEGFR_2() #EGF-pEGFR-2
	Species SHP SHP(shc) #SHP
	Species EGF_pEGFR_2_SHP EGF_pEGFR_2_SHP() #EGF-pEGFR-2-SHP
	Species Shc Shc(p~0,shp) #Shc
	Species EGF_pEGFR_2_Shc EGF_pEGFR_2_Shc() #EGF-pEGFR-2-Shc
	Species EGF_pEGFR_2_pShc EGF_pEGFR_2_pShc() #EGF-pEGFR-2-pShc
	Species pShc Shc(p~P,shp) #pShc
	Species pShc_SHP Shc(p~P,shp!356).SHP(shc!356) #pShc-SHP
	Species Grb2 Grb2(mekk1abcdef,sos) #Grb2
	Species EGF_pEGFR_2_pShc_Grb2 EGF_pEGFR_2_pShc_Grb2() #EGF-pEGFR-2-pShc-Grb2
	Species SOS SOS(grb2,p~0) #SOS
	Species EGF_pEGFR_2_pShc_Grb2_SOS EGF_pEGFR_2_pShc_Grb2_SOS() #EGF-pEGFR-2-pShc-Grb2-SOS
	Species Grb2_SOS SOS(grb2!64,p~0).Grb2(mekk1abcdef,sos!64) #Grb2-SOS
	Species RasGDP RasG(dp~DP,egf_pegff_2,raf,rasgap,rhogef,tp~0) #RasGDP
	Species EGF_pEGFR_2_pShc_Grb2_SOS_RasGDP EGF_pEGFR_2_pShc_Grb2_SOS_RasGDP() #EGF-pEGFR-2-pShc-Grb2-SOS-RasGDP
	Species RasGTP RasG(dp~0,egf_pegff_2,raf,rasgap,rhogef,tp~TP) #RasGTP
	Species EGF_pEGFR_2_Grb2 EGF_pEGFR_2_Grb2() #EGF-pEGFR-2-Grb2
	Species EGF_pEGFR_2_Grb2_SOS EGF_pEGFR_2_Grb2_SOS() #EGF-pEGFR-2-Grb2-SOS
	Species EGF_pEGFR_2_Grb2_SOS_RasGDP EGF_pEGFR_2_Grb2_SOS_RasGDP() #EGF-pEGFR-2-Grb2-SOS-RasGDP
	Species Raf Raf(mek,p~0,pase,phospho~0,pp~0,rasg) #Raf
	Species Raf_RasGTP Raf(mek,p~0,pase,phospho~0,pp~0,rasg!362).RasG(dp~0,egf_pegff_2,raf!362,rasgap,rhogef,tp~TP) #Raf-RasGTP
	Species pRaf Raf(mek,p~P,pase,phospho~0,pp~0,rasg) #pRaf
	Species MEK MEK(erk,p~0,phospho~0,pp2a,raf) #MEK
	Species pRaf_MEK Raf(mek!27,p~P,pase,phospho~0,pp~0,rasg).MEK(erk,p~0,phospho~0,pp2a,raf!27) #pRaf-MEK
	Species pMEK MEK(erk,p~P,phospho~0,pp2a,raf) #pMEK
	Species pRaf_pMEK Raf(mek!27,p~P,pase,phospho~0,pp~0,rasg).MEK(erk,p~P,phospho~0,pp2a,raf!27) #pRaf-pMEK
	Species ppMEK MEK(erk,p~0,phospho~PP,pp2a,raf) #ppMEK
	Species ERK ERK(mek,mkp3,p~0,phospho~0,rok) #ERK
	Species ppMEK_ERK ERK(mek!32,mkp3,p~0,phospho~0,rok).MEK(erk!32,p~0,phospho~PP,pp2a,raf) #ppMEK-ERK
	Species pERK ERK(mek,mkp3,p~P,phospho~0,rok) #pERK
	Species ppMEK_pERK MEK(erk!32,p~0,phospho~PP,pp2a,raf).ERK(mek!32,mkp3,p~P,phospho~0,rok) #ppMEK-pERK
	Species ppERK ERK(mek,mkp3,p~0,phospho~PP,rok) #ppERK
	Species Pase Pase(raf) #Pase
	Species pRaf_Pase Raf(mek,p~P,pase!358,phospho~0,pp~0,rasg).Pase(raf!358) #pRaf-Pase
	Species PP2A PP2A(mek) #PP2A
	Species ppMEK_PP2A MEK(erk,p~0,phospho~PP,pp2a!359,raf).PP2A(mek!359) #ppMEK-PP2A
	Species pMEK_PP2A MEK(erk,p~P,phospho~0,pp2a!359,raf).PP2A(mek!359) #pMEK-PP2A
	Species MKP3 MKP3(erk) #MKP3
	Species ppERK_MKP3 ERK(mek,mkp3!39,p~0,phospho~PP,rok).MKP3(erk!39) #ppERK-MKP3
	Species pERK_MKP3 ERK(mek,mkp3!39,p~P,phospho~0,rok).MKP3(erk!39) #pERK-MKP3
	Species RasGAP RasGAP(rasg) #RasGAP
	Species RasGTP_RasGAP RasG(dp~0,egf_pegff_2,raf,rasgap!368,rhogef,tp~TP).RasGAP(rasg!368) #RasGTP-RasGAP
	Species ppERK_EGF_pEGFR_2_pShc_Grb2_SOS ppERK_EGF_pEGFR_2_pShc_Grb2_SOS() #ppERK-EGF-pEGFR-2-pShc-Grb2-SOS
	Species pSOS SOS(grb2,p~P) #pSOS
	Species ppERK_EGF_pEGFR_2_Grb2_SOS ppERK_EGF_pEGFR_2_Grb2_SOS() #ppERK-EGF-pEGFR-2-Grb2-SOS
	Species PI3K PI3K(p~0,pip2,tp4) #PI3K
	Species EGF_pEGFR_2_PI3K EGF_pEGFR_2_PI3K() #EGF-pEGFR-2-PI3K
	Species EGF_pEGFF_2 EGF_pEGFF_2(EGF_pEGFR2_RasGAP~0,EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPef~0,EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPef~0,EGF_pEGRF_2~0,_~0,rasg) #EGF-pEGFF-2
	Species pPI3K PI3K(p~P,pip2,tp4) #pPI3K
	Species TP4 TP4(pi3k) #TP4
	Species pPI3K_TP4 PI3K(p~P,pip2,tp4!360).TP4(pi3k!360) #pPI3K-TP4
	Species PIP2 PIP2(pi3k) #PIP2
	Species pPI3K_PIP2 PI3K(p~P,pip2!363,tp4).PIP2(pi3k!363) #pPI3K-PIP2
	Species PIP3 PIP3(akt,pten,racgef) #PIP3
	Species Akt Akt(p~0,pip3) #Akt
	Species Akt_PIP3 PIP3(akt!352,pten,racgef).Akt(p~0,pip3!352) #Akt-PIP3
	Species PDK1 PDK1() #PDK1
	Species Akt_PIP3_PDK1 Akt_PIP3_PDK1() #Akt-PIP3-PDK1
	Species pAkt_PIP3 PIP3(akt!352,pten,racgef).Akt(p~P,pip3!352) #pAkt-PIP3
	Species pAkt Akt(p~P,pip3) #pAkt
	Species Takt Takt() #Takt
	Species pAkt_PIP3_Takt pAkt_PIP3_Takt() #pAkt-PIP3-Takt
	Species pRaf_pAkt_PIP3 pRaf_pAkt_PIP3() #pRaf-pAkt-PIP3
	Species ppRaf Raf(mek,p~0,pase,phospho~PP,pp~0,rasg) #ppRaf
	Species pROK ROK(epn,erk,p~P,pten,rhog) #pROK
	Species PTEN PTEN(p~0,pip3,rok) #PTEN
	Species pROK_PTEN ROK(epn,erk,p~P,pten!361,rhog).PTEN(p~0,pip3,rok!361) #pROK-PTEN
	Species pPTEN PTEN(p~P,pip3,rok) #pPTEN
	Species pPTEN_PIP3 PIP3(akt,pten!364,racgef).PTEN(p~P,pip3!364,rok) #pPTEN-PIP3
	Species RacGEF RacGEF(pip3) #RacGEF
	Species PIP3_RacGEF PIP3(akt,pten,racgef!354).RacGEF(pip3!354) #PIP3-RacGEF
	Species RacGDP RacG(dp~DP,racgap,rhogdi,tp~0) #RacGDP
	Species PIP3_RacGEF_RacGDP PIP3_RacGEF_RacGDP() #PIP3-RacGEF-RacGDP
	Species RacGTP RacG(dp~0,racgap,rhogdi,tp~TP) #RacGTP
	Species RhoGDI RhoGDI(racg,rhog) #RhoGDI
	Species RhoGDI_RacGDP RacG(dp~DP,racgap,rhogdi!369,tp~0).RhoGDI(racg!369,rhog) #RhoGDI-RacGDP
	Species RacGAP RacGAP(racg) #RacGAP
	Species RacGTP_RacGAP RacG(dp~0,racgap!370,rhogdi,tp~TP).RacGAP(racg!370) #RacGTP-RacGAP
	Species RhoGDP RhoG(dp~DP,rhogap,rhogdi,rhogef,rok,tp~0) #RhoGDP
	Species RhoGDP_RhoGDI RhoG(dp~DP,rhogap,rhogdi!371,rhogef,rok,tp~0).RhoGDI(racg,rhog!371) #RhoGDP-RhoGDI
	Species pRhoGEF RhoGEF(p~P,rasg,rhog,src) #pRhoGEF
	Species RhoGDP_pRhoGEF RhoG(dp~DP,rhogap,rhogdi,rhogef!374,rok,tp~0).RhoGEF(p~P,rasg,rhog!374,src) #RhoGDP-pRhoGEF
	Species RhoGTP RhoG(dp~0,rhogap,rhogdi,rhogef,rok,tp~TP) #RhoGTP
	Species EGF_pEGFR_2_RasGAP EGF_pEGFF_2(EGF_pEGFR2_RasGAP~EGF_pEGFR2_RasGAP,EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPef~0,EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPef~0,EGF_pEGRF_2~0,_~_,rasg) #EGF-pEGFR-2-RasGAP
	Species EGF_pEGFR_2_RasGAP_RasGTP EGF_pEGFF_2(EGF_pEGFR2_RasGAP~EGF_pEGFR2_RasGAP,EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPef~0,EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPef~0,EGF_pEGRF_2~0,_~_,rasg!376).RasG(dp~0,egf_pegff_2!376,raf,rasgap,rhogef,tp~TP) #EGF-pEGFR-2-RasGAP-RasGTP
	Species EGF_pEGFR2_RasGAP EGF_pEGFF_2(EGF_pEGFR2_RasGAP~EGF_pEGFR2_RasGAP,EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPef~0,EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPef~0,EGF_pEGRF_2~0,_~0,rasg) #EGF-pEGFR2-RasGAP
	Species SHP2 SHP2() #SHP2
	Species EGF_pEGFR_2_pShc_Grb2_SHP2 EGF_pEGFR_2_pShc_Grb2_SHP2() #EGF-pEGFR-2-pShc-Grb2-SHP2
	Species EGF_pEGFR_2_Grb2_SHP2 EGF_pEGFR_2_Grb2_SHP2() #EGF-pEGFR-2-Grb2-SHP2
	Species EGF_pEGFR_2_pShc_Grb2_SHP2_pRhoGEF EGF_pEGFR_2_pShc_Grb2_SHP2_pRhoGEF() #EGF-pEGFR-2-pShc-Grb2-SHP2-pRhoGEF
	Species RhoGEF RhoGEF(p~0,rasg,rhog,src) #RhoGEF
	Species pRhoGAP RhoGAP(p~P,rhog,src) #pRhoGAP
	Species EGF_pEGFR_2_pShc_Grb2_SHP2_pRhoGAP EGF_pEGFR_2_pShc_Grb2_SHP2_pRhoGAP() #EGF-pEGFR-2-pShc-Grb2-SHP2-pRhoGAP
	Species RhoGAP RhoGAP(p~0,rhog,src) #RhoGAP
	Species EGF_pEGFR_2_Grb2_SHP2_pRhoGEF EGF_pEGFR_2_Grb2_SHP2_pRhoGEF() #EGF-pEGFR-2-Grb2-SHP2-pRhoGEF
	Species EGF_pEGFR_2_Grb2_SHP2_pRhoGAP EGF_pEGFR_2_Grb2_SHP2_pRhoGAP() #EGF-pEGFR-2-Grb2-SHP2-pRhoGAP
	Species EGF_pEGFR_2_RasGAP_SHP2 EGF_pEGFR_2_RasGAP_SHP2() #EGF-pEGFR-2-RasGAP-SHP2
	Species pSrc Src(p~P,rhogap,rhogef,tp7) #pSrc
	Species pSrc_RhoGEF RhoGEF(p~0,rasg,rhog,src!366).Src(p~P,rhogap,rhogef!366,tp7) #pSrc-RhoGEF
	Species pSrc_RhoGAP Src(p~P,rhogap!367,rhogef,tp7).RhoGAP(p~0,rhog,src!367) #pSrc-RhoGAP
	Species pRhoGAP_RhoGTP RhoG(dp~0,rhogap!375,rhogdi,rhogef,rok,tp~TP).RhoGAP(p~P,rhog!375,src) #pRhoGAP-RhoGTP
	Species ROK ROK(epn,erk,p~0,pten,rhog) #ROK
	Species RhoGTP_ROK RhoG(dp~0,rhogap,rhogdi,rhogef,rok!365,tp~TP).ROK(epn,erk,p~0,pten,rhog!365) #RhoGTP-ROK
	Species Src Src(p~0,rhogap,rhogef,tp7) #Src
	Species EGF_pEGFR_2_Src EGF_pEGFR_2_Src() #EGF-pEGFR-2-Src
	Species EGF_pEGFR_2_pSrc EGF_pEGFR_2_pSrc() #EGF-pEGFR-2-pSrc
	Species EGF_pEGRF_2 EGF_pEGFF_2(EGF_pEGFR2_RasGAP~0,EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPef~0,EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPef~0,EGF_pEGRF_2~EGF_pEGRF_2,_~0,rasg) #EGF-pEGRF-2
	Species TP7 TP7(src) #TP7
	Species pSrc_TP7 Src(p~P,rhogap,rhogef,tp7!351).TP7(src!351) #pSrc-TP7
	Species Src_TP7 Src(p~0,rhogap,rhogef,tp7!351).TP7(src!351) #Src-TP7
	Species Cbl_CIN85 Cbl_CIN85() #Cbl-CIN85
	Species EGF_pEGFR_2_pShc_Grb2_SOS_Cbl_CIN85 EGF_pEGFR_2_pShc_Grb2_SOS_Cbl_CIN85() #EGF-pEGFR-2-pShc-Grb2-SOS-Cbl-CIN85
	Species EGF_pEGFR_2_Grb2_SOS_Cbl_CIN85 EGF_pEGFR_2_Grb2_SOS_Cbl_CIN85() #EGF-pEGFR-2-Grb2-SOS-Cbl-CIN85
	Species EPn EPn(mpase,p~0,rok) #EPn
	Species EGF_pEGFR_2_pShc_Grb2_SOS_Cbl_CIN85_EPn EGF_pEGFR_2_pShc_Grb2_SOS_Cbl_CIN85_EPn() #EGF-pEGFR-2-pShc-Grb2-SOS-Cbl-CIN85-EPn
	Species EGF_pEGFR_2_Grb2_SOS_Cbl_CIN85_EPn EGF_pEGFR_2_Grb2_SOS_Cbl_CIN85_EPn() #EGF-pEGFR-2-Grb2-SOS-Cbl-CIN85-EPn
	Species EGF_pEGFR_2_degrade EGF_pEGFR_2_degrade() #EGF-pEGFR-2-degrade
	Species pShc_Grb2_SOS pShc_Grb2_SOS() #pShc-Grb2-SOS
	Species Pro_EGFR EGFR(egf,p~0,pro_~PRO_) #Pro-EGFR
	Species pROK_EPn ROK(epn!357,erk,p~P,pten,rhog).EPn(mpase,p~0,rok!357) #pROK-EPn
	Species pEPn EPn(mpase,p~P,rok) #pEPn
	Species MPase MPase(epn) #MPase
	Species pEPn_MPase EPn(mpase!353,p~P,rok).MPase(epn!353) #pEPn-MPase
	Species pEPn_Mpase EPn(mpase!353,p~0,rok).MPase(epn!353) #pEPn-Mpase
	Species Ras_GTP_RhoGEF RasG(dp~0,egf_pegff_2,raf,rasgap,rhogef!372,tp~TP).RhoGEF(p~0,rasg!372,rhog,src) #Ras-GTP-RhoGEF
	Species ppERK_pROK ERK(mek,mkp3,p~0,phospho~PP,rok!373).ROK(epn,erk!373,p~P,pten,rhog) #ppERK-pROK
	Species MEKK1abcdef MEKK1abcdef(grb2) #MEKK1abcdef
	Species Grb2_MEKK1abcdef Grb2(mekk1abcdef!355,sos).MEKK1abcdef(grb2!355) #Grb2-MEKK1abcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abcdef EGF_pEGFR_2_pShc_Grb2_MEKK1abcdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1abcdef
	Species EGF_pEGFR_2_Grb2_MEKK1abcdef EGF_pEGFR_2_Grb2_MEKK1abcdef() #EGF-pEGFR-2-Grb2-MEKK1abcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdef EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1abMEKcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abpMEKcdef EGF_pEGFR_2_pShc_Grb2_MEKK1abpMEKcdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1abpMEKcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdef EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1abppMEKcdef
	Species EGF_pEGFR_2_Grb2_MEKK1abMEKcdef EGF_pEGFR_2_Grb2_MEKK1abMEKcdef() #EGF-pEGFR-2-Grb2-MEKK1abMEKcdef
	Species EGF_pEGFR_2_Grb2_MEKK1abpMEKcdef EGF_pEGFR_2_Grb2_MEKK1abpMEKcdef() #EGF-pEGFR-2-Grb2-MEKK1abpMEKcdef
	Species EGF_pEGFR_2_Grb2_MEKK1abppMEKcdef EGF_pEGFR_2_Grb2_MEKK1abppMEKcdef() #EGF-pEGFR-2-Grb2-MEKK1abppMEKcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdef EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbMEKcdef EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbMEKcdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbMEKcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbpMEKcdef EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbpMEKcdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbpMEKcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcdef EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbppMEKcdef
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbcdef EGF_pEGFR_2_Grb2_MEKK1aRafbcdef() #EGF-pEGFR-2-Grb2-MEKK1aRafbcdef
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbMEKcdef EGF_pEGFR_2_Grb2_MEKK1aRafbMEKcdef() #EGF-pEGFR-2-Grb2-MEKK1aRafbMEKcdef
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbpMEKcdef EGF_pEGFR_2_Grb2_MEKK1aRafbpMEKcdef() #EGF-pEGFR-2-Grb2-MEKK1aRafbpMEKcdef
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcdef EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcdef() #EGF-pEGFR-2-Grb2-MEKK1aRafbppMEKcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abcdefRasGTP EGF_pEGFR_2_pShc_Grb2_MEKK1abcdefRasGTP() #EGF-pEGFR-2-pShc-Grb2-MEKK1abcdefRasGTP
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdefRasGTP EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdefRasGTP() #EGF-pEGFR-2-pShc-Grb2-MEKK1abMEKcdefRasGTP
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abpMEKcdefRasGTP EGF_pEGFR_2_pShc_Grb2_MEKK1abpMEKcdefRasGTP() #EGF-pEGFR-2-pShc-Grb2-MEKK1abpMEKcdefRasGTP
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdefRasGTP EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdefRasGTP() #EGF-pEGFR-2-pShc-Grb2-MEKK1abppMEKcdefRasGTP
	Species EGF_pEGFR_2_Grb2_MEKK1abcdefRasGTP EGF_pEGFR_2_Grb2_MEKK1abcdefRasGTP() #EGF-pEGFR-2-Grb2-MEKK1abcdefRasGTP
	Species EGF_pEGFR_2_Grb2_MEKK1abMEKcdefRasGTP EGF_pEGFR_2_Grb2_MEKK1abMEKcdefRasGTP() #EGF-pEGFR-2-Grb2-MEKK1abMEKcdefRasGTP
	Species EGF_pEGFR_2_Grb2_MEKK1abpMEKcdefRasGTP EGF_pEGFR_2_Grb2_MEKK1abpMEKcdefRasGTP() #EGF-pEGFR-2-Grb2-MEKK1abpMEKcdefRasGTP
	Species EGF_pEGFR_2_Grb2_MEKK1abppMEKcdefRasGTP EGF_pEGFR_2_Grb2_MEKK1abppMEKcdefRasGTP() #EGF-pEGFR-2-Grb2-MEKK1abppMEKcdefRasGTP
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcERKdefRasGTP EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcERKdefRasGTP() #EGF-pEGFR-2-pShc-Grb2-MEKK1abppMEKcERKdefRasGTP
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcpERKdefRasGTP EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcpERKdefRasGTP() #EGF-pEGFR-2-pShc-Grb2-MEKK1abppMEKcpERKdefRasGTP
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcppERKdefRasGTP EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcppERKdefRasGTP() #EGF-pEGFR-2-pShc-Grb2-MEKK1abppMEKcppERKdefRasGTP
	Species EGF_pEGFR_2_Grb2_MEKK1abppMEKcERKdefRasGTP EGF_pEGFR_2_Grb2_MEKK1abppMEKcERKdefRasGTP() #EGF-pEGFR-2-Grb2-MEKK1abppMEKcERKdefRasGTP
	Species EGF_pEGFR_2_Grb2_MEKK1abppMEKcpERKdefRasGTP EGF_pEGFR_2_Grb2_MEKK1abppMEKcpERKdefRasGTP() #EGF-pEGFR-2-Grb2-MEKK1abppMEKcpERKdefRasGTP
	Species EGF_pEGFR_2_Grb2_MEKK1abppMEKcppERKdefRasGTP EGF_pEGFR_2_Grb2_MEKK1abppMEKcppERKdefRasGTP() #EGF-pEGFR-2-Grb2-MEKK1abppMEKcppERKdefRasGTP
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbcdef EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbcdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1apRafbcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbMEKcdef EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbMEKcdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1apRafbMEKcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbpMEKcdef EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbpMEKcdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1apRafbpMEKcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbppMEKcdef EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbppMEKcdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1apRafbppMEKcdef
	Species EGF_pEGFR_2_Grb2_MEKK1apRafbcdef EGF_pEGFR_2_Grb2_MEKK1apRafbcdef() #EGF-pEGFR-2-Grb2-MEKK1apRafbcdef
	Species EGF_pEGFR_2_Grb2_MEKK1apRafbMEKcdef EGF_pEGFR_2_Grb2_MEKK1apRafbMEKcdef() #EGF-pEGFR-2-Grb2-MEKK1apRafbMEKcdef
	Species EGF_pEGFR_2_Grb2_MEKK1apRafbpMEKcdef EGF_pEGFR_2_Grb2_MEKK1apRafbpMEKcdef() #EGF-pEGFR-2-Grb2-MEKK1apRafbpMEKcdef
	Species EGF_pEGFR_2_Grb2_MEKK1apRafbppMEKcdef EGF_pEGFR_2_Grb2_MEKK1apRafbppMEKcdef() #EGF-pEGFR-2-Grb2-MEKK1apRafbppMEKcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdRhoGTPef EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdRhoGTPef() #EGF-pEGFR-2-pShc-Grb2-MEKK1abMEKcdRhoGTPef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdRhoGTPef EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdRhoGTPef() #EGF-pEGFR-2-pShc-Grb2-MEKK1abppMEKcdRhoGTPef
	Species EGF_pEGFR_2_Grb2_MEKK1abMEKcdRhoGTPef EGF_pEGFR_2_Grb2_MEKK1abMEKcdRhoGTPef() #EGF-pEGFR-2-Grb2-MEKK1abMEKcdRhoGTPef
	Species EGF_pEGFR_2_Grb2_MEKK1abppMEKcdRhoGTPef EGF_pEGFR_2_Grb2_MEKK1abppMEKcdRhoGTPef() #EGF-pEGFR-2-Grb2-MEKK1abppMEKcdRhoGTPef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbMEKcdRhoGTPef EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbMEKcdRhoGTPef() #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbMEKcdRhoGTPef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPef EGF_pEGFF_2(EGF_pEGFR2_RasGAP~0,EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPef~0,EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPef~EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPef,EGF_pEGRF_2~0,_~0,rasg) #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbcdRhoGTPef
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbMEKcdRhoGTPef EGF_pEGFR_2_Grb2_MEKK1aRafbMEKcdRhoGTPef() #EGF-pEGFR-2-Grb2-MEKK1aRafbMEKcdRhoGTPef
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPef EGF_pEGFF_2(EGF_pEGFR2_RasGAP~0,EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPef~EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPef,EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPef~0,EGF_pEGRF_2~0,_~0,rasg) #EGF-pEGFR-2-Grb2-MEKK1aRafbcdRhoGTPef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcERKdef EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcERKdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1abppMEKcERKdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcpERKdef EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcpERKdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1abppMEKcpERKdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcppERKdef EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcppERKdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1abppMEKcppERKdef
	Species EGF_pEGFR_2_Grb2_MEKK1abppMEKcERKdef EGF_pEGFR_2_Grb2_MEKK1abppMEKcERKdef() #EGF-pEGFR-2-Grb2-MEKK1abppMEKcERKdef
	Species EGF_pEGFR_2_Grb2_MEKK1abppMEKcpERKdef EGF_pEGFR_2_Grb2_MEKK1abppMEKcpERKdef() #EGF-pEGFR-2-Grb2-MEKK1abppMEKcpERKdef
	Species EGF_pEGFR_2_Grb2_MEKK1abppMEKcppERKdef EGF_pEGFR_2_Grb2_MEKK1abppMEKcppERKdef() #EGF-pEGFR-2-Grb2-MEKK1abppMEKcppERKdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcERKdef EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcERKdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbppMEKcERKdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcpERKdef EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcpERKdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbppMEKcpERKdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcppERKdef EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcppERKdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbppMEKcppERKdef
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcERKdef EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcERKdef() #EGF-pEGFR-2-Grb2-MEKK1aRafbppMEKcERKdef
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcpERKdef EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcpERKdef() #EGF-pEGFR-2-Grb2-MEKK1aRafbppMEKcpERKdef
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcppERKdef EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcppERKdef() #EGF-pEGFR-2-Grb2-MEKK1aRafbppMEKcppERKdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcdRhoGTPepRhoGAPf EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcdRhoGTPepRhoGAPf() #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbppMEKcdRhoGTPepRhoGAPf
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcdRhoGTPepRhoGAPf EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcdRhoGTPepRhoGAPf() #EGF-pEGFR-2-Grb2-MEKK1aRafbppMEKcdRhoGTPepRhoGAPf
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPepRhoGAPf EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPepRhoGAPf() #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbcdRhoGTPepRhoGAPf
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPepRhoGAPf EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPepRhoGAPf() #EGF-pEGFR-2-Grb2-MEKK1aRafbcdRhoGTPepRhoGAPf
end observables
begin reaction rules
	reaction_0: EGF(egfr) + EGFR(egf,p~0,pro_~0) <-> EGFR(egf!24,p~0,pro_~0).EGF(egfr!24) r1_k1,r1_k2
	reaction_1: EGFR(egf!24,p~0,pro_~0).EGF(egfr!24) + EGFR(egf!24,p~0,pro_~0).EGF(egfr!24) <-> EGF_EGFR_2() r2_k1,r2_k2
	reaction_2: EGF_EGFR_2() -> EGF_pEGFR_2() r3_k1
	reaction_3: EGF_pEGFR_2() + SHP(shc) <-> EGF_pEGFR_2_SHP() r4_k1,r4_k2
	reaction_4: EGF_pEGFR_2_SHP() -> EGF_EGFR_2() + SHP(shc) r5_k1
	reaction_5: EGF_pEGFR_2() + Shc(p~0,shp) <-> EGF_pEGFR_2_Shc() r6_k1,r6_k2
	reaction_6: EGF_pEGFR_2_Shc() -> EGF_pEGFR_2_pShc() r7_k1
	reaction_7: EGF_pEGFR_2_pShc() <-> EGF_pEGFR_2() + Shc(p~P,shp) r8_k1,r8_k2
	reaction_8: Shc(p~P,shp) + SHP(shc) <-> Shc(p~P,shp!356).SHP(shc!356) r9_k1,r9_k2
	reaction_9: Shc(p~P,shp!356).SHP(shc!356) -> Shc(p~0,shp) + SHP(shc) r10_k1
	reaction_10: EGF_pEGFR_2_pShc() + Grb2(mekk1abcdef,sos) <-> EGF_pEGFR_2_pShc_Grb2() r11_k1,r11_k2
	reaction_11: EGF_pEGFR_2_pShc_Grb2() + SOS(grb2,p~0) <-> EGF_pEGFR_2_pShc_Grb2_SOS() r12_k1,r12_k2
	reaction_12: Grb2(mekk1abcdef,sos) + SOS(grb2,p~0) <-> SOS(grb2!64,p~0).Grb2(mekk1abcdef,sos!64) r13_k1,r13_k2
	reaction_13: EGF_pEGFR_2_pShc() + SOS(grb2!64,p~0).Grb2(mekk1abcdef,sos!64) <-> EGF_pEGFR_2_pShc_Grb2_SOS() r14_k1,r14_k2
	reaction_14: EGF_pEGFR_2_pShc_Grb2_SOS() + RasG(dp~DP,egf_pegff_2,raf,rasgap,rhogef,tp~0) <-> EGF_pEGFR_2_pShc_Grb2_SOS_RasGDP() r15_k1,r15_k2
	reaction_15: EGF_pEGFR_2_pShc_Grb2_SOS_RasGDP() -> EGF_pEGFR_2_pShc_Grb2_SOS() + RasG(dp~0,egf_pegff_2,raf,rasgap,rhogef,tp~TP) r16_k1
	reaction_16: EGF_pEGFR_2() + Grb2(mekk1abcdef,sos) <-> EGF_pEGFR_2_Grb2() r17_k1,r17_k2
	reaction_17: EGF_pEGFR_2_Grb2() + SOS(grb2,p~0) <-> EGF_pEGFR_2_Grb2_SOS() r18_k1,r18_k2
	reaction_18: EGF_pEGFR_2() + SOS(grb2!64,p~0).Grb2(mekk1abcdef,sos!64) <-> EGF_pEGFR_2_Grb2_SOS() r19_k1,r19_k2
	reaction_19: EGF_pEGFR_2_Grb2_SOS() + RasG(dp~DP,egf_pegff_2,raf,rasgap,rhogef,tp~0) <-> EGF_pEGFR_2_Grb2_SOS_RasGDP() r20_k1,r20_k2
	reaction_20: EGF_pEGFR_2_Grb2_SOS_RasGDP() -> EGF_pEGFR_2_Grb2_SOS() + RasG(dp~0,egf_pegff_2,raf,rasgap,rhogef,tp~TP) r21_k1
	reaction_21: Raf(mek,p~0,pase,phospho~0,pp~0,rasg) + RasG(dp~0,egf_pegff_2,raf,rasgap,rhogef,tp~TP) <-> Raf(mek,p~0,pase,phospho~0,pp~0,rasg!362).RasG(dp~0,egf_pegff_2,raf!362,rasgap,rhogef,tp~TP) r22_k1,r22_k2
	reaction_22: Raf(mek,p~0,pase,phospho~0,pp~0,rasg!362).RasG(dp~0,egf_pegff_2,raf!362,rasgap,rhogef,tp~TP) -> Raf(mek,p~P,pase,phospho~0,pp~0,rasg) + RasG(dp~0,egf_pegff_2,raf,rasgap,rhogef,tp~TP) r23_k1
	reaction_23: Raf(mek,p~P,pase,phospho~0,pp~0,rasg) + MEK(erk,p~0,phospho~0,pp2a,raf) <-> Raf(mek!27,p~P,pase,phospho~0,pp~0,rasg).MEK(erk,p~0,phospho~0,pp2a,raf!27) r24_k1,r24_k2
	reaction_24: Raf(mek!27,p~P,pase,phospho~0,pp~0,rasg).MEK(erk,p~0,phospho~0,pp2a,raf!27) -> Raf(mek,p~P,pase,phospho~0,pp~0,rasg) + MEK(erk,p~P,phospho~0,pp2a,raf) r25_k1
	reaction_25: Raf(mek,p~P,pase,phospho~0,pp~0,rasg) + MEK(erk,p~P,phospho~0,pp2a,raf) <-> Raf(mek!27,p~P,pase,phospho~0,pp~0,rasg).MEK(erk,p~P,phospho~0,pp2a,raf!27) r26_k1,r26_k2
	reaction_26: Raf(mek!27,p~P,pase,phospho~0,pp~0,rasg).MEK(erk,p~P,phospho~0,pp2a,raf!27) -> Raf(mek,p~P,pase,phospho~0,pp~0,rasg) + MEK(erk,p~0,phospho~PP,pp2a,raf) r27_k1
	reaction_27: MEK(erk,p~0,phospho~PP,pp2a,raf) + ERK(mek,mkp3,p~0,phospho~0,rok) <-> ERK(mek!32,mkp3,p~0,phospho~0,rok).MEK(erk!32,p~0,phospho~PP,pp2a,raf) r28_k1,r28_k2
	reaction_28: ERK(mek!32,mkp3,p~0,phospho~0,rok).MEK(erk!32,p~0,phospho~PP,pp2a,raf) -> MEK(erk,p~0,phospho~PP,pp2a,raf) + ERK(mek,mkp3,p~P,phospho~0,rok) r29_k1
	reaction_29: MEK(erk,p~0,phospho~PP,pp2a,raf) + ERK(mek,mkp3,p~P,phospho~0,rok) <-> MEK(erk!32,p~0,phospho~PP,pp2a,raf).ERK(mek!32,mkp3,p~P,phospho~0,rok) r30_k1,r30_k2
	reaction_30: MEK(erk!32,p~0,phospho~PP,pp2a,raf).ERK(mek!32,mkp3,p~P,phospho~0,rok) -> MEK(erk,p~0,phospho~PP,pp2a,raf) + ERK(mek,mkp3,p~0,phospho~PP,rok) r31_k1
	reaction_31: Raf(mek,p~P,pase,phospho~0,pp~0,rasg) + Pase(raf) <-> Raf(mek,p~P,pase!358,phospho~0,pp~0,rasg).Pase(raf!358) r32_k1,r32_k2
	reaction_32: Raf(mek,p~P,pase!358,phospho~0,pp~0,rasg).Pase(raf!358) -> Raf(mek,p~0,pase,phospho~0,pp~0,rasg) + Pase(raf) r33_k1
	reaction_33: MEK(erk,p~0,phospho~PP,pp2a,raf) + PP2A(mek) <-> MEK(erk,p~0,phospho~PP,pp2a!359,raf).PP2A(mek!359) r34_k1,r34_k2
	reaction_34: MEK(erk,p~0,phospho~PP,pp2a!359,raf).PP2A(mek!359) -> MEK(erk,p~P,phospho~0,pp2a,raf) + PP2A(mek) r35_k1
	reaction_35: MEK(erk,p~P,phospho~0,pp2a,raf) + PP2A(mek) <-> MEK(erk,p~P,phospho~0,pp2a!359,raf).PP2A(mek!359) r36_k1,r36_k2
	reaction_36: MEK(erk,p~P,phospho~0,pp2a!359,raf).PP2A(mek!359) -> MEK(erk,p~0,phospho~0,pp2a,raf) + PP2A(mek) r37_k1
	reaction_37: ERK(mek,mkp3,p~0,phospho~PP,rok) + MKP3(erk) <-> ERK(mek,mkp3!39,p~0,phospho~PP,rok).MKP3(erk!39) r38_k1,r38_k2
	reaction_38: ERK(mek,mkp3!39,p~0,phospho~PP,rok).MKP3(erk!39) -> ERK(mek,mkp3,p~P,phospho~0,rok) + MKP3(erk) r39_k1
	reaction_39: ERK(mek,mkp3,p~P,phospho~0,rok) + MKP3(erk) <-> ERK(mek,mkp3!39,p~P,phospho~0,rok).MKP3(erk!39) r40_k1,r40_k2
	reaction_40: ERK(mek,mkp3!39,p~P,phospho~0,rok).MKP3(erk!39) -> ERK(mek,mkp3,p~0,phospho~0,rok) + MKP3(erk) r41_k1
	reaction_41: RasG(dp~0,egf_pegff_2,raf,rasgap,rhogef,tp~TP) -> RasG(dp~DP,egf_pegff_2,raf,rasgap,rhogef,tp~0) r42_k1
	reaction_42: RasG(dp~0,egf_pegff_2,raf,rasgap,rhogef,tp~TP) + RasGAP(rasg) <-> RasG(dp~0,egf_pegff_2,raf,rasgap!368,rhogef,tp~TP).RasGAP(rasg!368) r43_k1,r43_k2
	reaction_43: RasG(dp~0,egf_pegff_2,raf,rasgap!368,rhogef,tp~TP).RasGAP(rasg!368) -> RasG(dp~DP,egf_pegff_2,raf,rasgap,rhogef,tp~0) + RasGAP(rasg) r44_k1
	reaction_44: ERK(mek,mkp3,p~0,phospho~PP,rok) + EGF_pEGFR_2_pShc_Grb2_SOS() <-> ppERK_EGF_pEGFR_2_pShc_Grb2_SOS() r45_k1,r45_k2
	reaction_45: ppERK_EGF_pEGFR_2_pShc_Grb2_SOS() -> ERK(mek,mkp3,p~0,phospho~PP,rok) + EGF_pEGFR_2() + Shc(p~P,shp) + Grb2(mekk1abcdef,sos) + SOS(grb2,p~P) r46_k1
	reaction_46: ERK(mek,mkp3,p~0,phospho~PP,rok) + EGF_pEGFR_2_Grb2_SOS() <-> ppERK_EGF_pEGFR_2_Grb2_SOS() r47_k1,r47_k2
	reaction_47: ppERK_EGF_pEGFR_2_Grb2_SOS() -> ERK(mek,mkp3,p~0,phospho~PP,rok) + EGF_pEGFR_2() + Grb2(mekk1abcdef,sos) + SOS(grb2,p~P) r48_k1
	reaction_48: SOS(grb2,p~P) -> SOS(grb2,p~0) r49_k1
	reaction_49: EGF_pEGFR_2() + PI3K(p~0,pip2,tp4) <-> EGF_pEGFR_2_PI3K() r50_k1,r50_k2
	reaction_50: EGF_pEGFR_2_PI3K() -> EGF_pEGFF_2(EGF_pEGFR2_RasGAP~0,EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPef~0,EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPef~0,EGF_pEGRF_2~0,_~0,rasg) + PI3K(p~P,pip2,tp4) r51_k1
	reaction_51: PI3K(p~P,pip2,tp4) + TP4(pi3k) <-> PI3K(p~P,pip2,tp4!360).TP4(pi3k!360) r52_k1,r52_k2
	reaction_52: PI3K(p~P,pip2,tp4!360).TP4(pi3k!360) -> PI3K(p~0,pip2,tp4) + TP4(pi3k) r53_k1
	reaction_53: PI3K(p~P,pip2,tp4) + PIP2(pi3k) <-> PI3K(p~P,pip2!363,tp4).PIP2(pi3k!363) r54_k1,r54_k2
	reaction_54: PI3K(p~P,pip2!363,tp4).PIP2(pi3k!363) -> PI3K(p~P,pip2,tp4) + PIP3(akt,pten,racgef) r55_k1
	reaction_55: Akt(p~0,pip3) + PIP3(akt,pten,racgef) <-> PIP3(akt!352,pten,racgef).Akt(p~0,pip3!352) r56_k1,r56_k2
	reaction_56: PIP3(akt!352,pten,racgef).Akt(p~0,pip3!352) + PDK1() <-> Akt_PIP3_PDK1() r57_k1,r57_k2
	reaction_57: Akt_PIP3_PDK1() -> PIP3(akt!352,pten,racgef).Akt(p~P,pip3!352) + PDK1() r58_k1
	reaction_58: PIP3(akt!352,pten,racgef).Akt(p~P,pip3!352) <-> Akt(p~P,pip3) + PIP3(akt,pten,racgef) r59_k1,r59_k2
	reaction_59: PIP3(akt!352,pten,racgef).Akt(p~P,pip3!352) + Takt() <-> pAkt_PIP3_Takt() r60_k1,r60_k2
	reaction_60: pAkt_PIP3_Takt() -> PIP3(akt!352,pten,racgef).Akt(p~0,pip3!352) + Takt() r61_k1
	reaction_61: Raf(mek,p~P,pase,phospho~0,pp~0,rasg) + PIP3(akt!352,pten,racgef).Akt(p~P,pip3!352) <-> pRaf_pAkt_PIP3() r62_k1,r62_k2
	reaction_62: pRaf_pAkt_PIP3() -> Raf(mek,p~0,pase,phospho~PP,pp~0,rasg) + PIP3(akt!352,pten,racgef).Akt(p~P,pip3!352) r63_k1
	reaction_63: Raf(mek,p~0,pase,phospho~PP,pp~0,rasg) -> Raf(mek,p~P,pase,phospho~0,pp~0,rasg) r64_k1
	reaction_64: ROK(epn,erk,p~P,pten,rhog) + PTEN(p~0,pip3,rok) <-> ROK(epn,erk,p~P,pten!361,rhog).PTEN(p~0,pip3,rok!361) r65_k1,r65_k2
	reaction_65: ROK(epn,erk,p~P,pten!361,rhog).PTEN(p~0,pip3,rok!361) -> ROK(epn,erk,p~P,pten,rhog) + PTEN(p~P,pip3,rok) r66_k1
	reaction_66: PTEN(p~P,pip3,rok) + PIP3(akt,pten,racgef) <-> PIP3(akt,pten!364,racgef).PTEN(p~P,pip3!364,rok) r67_k1,r67_k2
	reaction_67: PIP3(akt,pten!364,racgef).PTEN(p~P,pip3!364,rok) -> PTEN(p~P,pip3,rok) + PIP2(pi3k) r68_k1
	reaction_68: PTEN(p~P,pip3,rok) -> PTEN(p~0,pip3,rok) r69_k1
	reaction_69: PIP3(akt,pten,racgef) -> PIP2(pi3k) r70_k1
	reaction_70: PIP3(akt,pten,racgef) + RacGEF(pip3) <-> PIP3(akt,pten,racgef!354).RacGEF(pip3!354) r71_k1,r71_k2
	reaction_71: PIP3(akt,pten,racgef!354).RacGEF(pip3!354) + RacG(dp~DP,racgap,rhogdi,tp~0) <-> PIP3_RacGEF_RacGDP() r72_k1,r72_k2
	reaction_72: PIP3_RacGEF_RacGDP() -> PIP3(akt,pten,racgef!354).RacGEF(pip3!354) + RacG(dp~0,racgap,rhogdi,tp~TP) r73_k1
	reaction_73: RhoGDI(racg,rhog) + RacG(dp~DP,racgap,rhogdi,tp~0) <-> RacG(dp~DP,racgap,rhogdi!369,tp~0).RhoGDI(racg!369,rhog) r74_k1,r74_k2
	reaction_74: RacG(dp~0,racgap,rhogdi,tp~TP) -> RacG(dp~DP,racgap,rhogdi,tp~0) r75_k1
	reaction_75: RacG(dp~0,racgap,rhogdi,tp~TP) + RacGAP(racg) <-> RacG(dp~0,racgap!370,rhogdi,tp~TP).RacGAP(racg!370) r76_k1,r76_k2
	reaction_76: RacG(dp~0,racgap!370,rhogdi,tp~TP).RacGAP(racg!370) -> RacG(dp~DP,racgap,rhogdi,tp~0) + RacGAP(racg) r77_k1
	reaction_77: RhoG(dp~DP,rhogap,rhogdi,rhogef,rok,tp~0) + RhoGDI(racg,rhog) <-> RhoG(dp~DP,rhogap,rhogdi!371,rhogef,rok,tp~0).RhoGDI(racg,rhog!371) r78_k1,r78_k2
	reaction_78: RhoG(dp~DP,rhogap,rhogdi,rhogef,rok,tp~0) + RhoGEF(p~P,rasg,rhog,src) <-> RhoG(dp~DP,rhogap,rhogdi,rhogef!374,rok,tp~0).RhoGEF(p~P,rasg,rhog!374,src) r79_k1,r79_k2
	reaction_79: RhoG(dp~DP,rhogap,rhogdi,rhogef!374,rok,tp~0).RhoGEF(p~P,rasg,rhog!374,src) -> RhoG(dp~0,rhogap,rhogdi,rhogef,rok,tp~TP) + RhoGEF(p~P,rasg,rhog,src) r80_k1
	reaction_80: RhoG(dp~0,rhogap,rhogdi,rhogef,rok,tp~TP) -> RhoG(dp~DP,rhogap,rhogdi,rhogef,rok,tp~0) r81_k1
	reaction_81: EGF_pEGFR_2() + RasGAP(rasg) <-> EGF_pEGFF_2(EGF_pEGFR2_RasGAP~EGF_pEGFR2_RasGAP,EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPef~0,EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPef~0,EGF_pEGRF_2~0,_~_,rasg) r82_k1,r82_k2
	reaction_82: EGF_pEGFF_2(EGF_pEGFR2_RasGAP~EGF_pEGFR2_RasGAP,EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPef~0,EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPef~0,EGF_pEGRF_2~0,_~_,rasg) + RasG(dp~0,egf_pegff_2,raf,rasgap,rhogef,tp~TP) <-> EGF_pEGFF_2(EGF_pEGFR2_RasGAP~EGF_pEGFR2_RasGAP,EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPef~0,EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPef~0,EGF_pEGRF_2~0,_~_,rasg!376).RasG(dp~0,egf_pegff_2!376,raf,rasgap,rhogef,tp~TP) r83_k1,r83_k2
	reaction_83: EGF_pEGFF_2(EGF_pEGFR2_RasGAP~EGF_pEGFR2_RasGAP,EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPef~0,EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPef~0,EGF_pEGRF_2~0,_~_,rasg!376).RasG(dp~0,egf_pegff_2!376,raf,rasgap,rhogef,tp~TP) -> EGF_pEGFF_2(EGF_pEGFR2_RasGAP~EGF_pEGFR2_RasGAP,EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPef~0,EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPef~0,EGF_pEGRF_2~0,_~0,rasg) + RasG(dp~DP,egf_pegff_2,raf,rasgap,rhogef,tp~0) r84_k1
	reaction_84: EGF_pEGFR_2_pShc_Grb2() + SHP2() <-> EGF_pEGFR_2_pShc_Grb2_SHP2() r85_k1,r85_k2
	reaction_85: EGF_pEGFR_2_Grb2() + SHP2() <-> EGF_pEGFR_2_Grb2_SHP2() r86_k1,r86_k2
	reaction_86: EGF_pEGFR_2_pShc_Grb2_SHP2() -> EGF_EGFR_2() + Shc(p~P,shp) + Grb2(mekk1abcdef,sos) + SHP2() r87_k1
	reaction_87: EGF_pEGFR_2_Grb2_SHP2() -> EGF_EGFR_2() + Grb2(mekk1abcdef,sos) + SHP2() r88_k1
	reaction_88: EGF_pEGFR_2_pShc_Grb2_SHP2() + RhoGEF(p~P,rasg,rhog,src) <-> EGF_pEGFR_2_pShc_Grb2_SHP2_pRhoGEF() r89_k1,r89_k2
	reaction_89: EGF_pEGFR_2_pShc_Grb2_SHP2_pRhoGEF() -> EGF_pEGFR_2_pShc_Grb2_SHP2() + RhoGEF(p~0,rasg,rhog,src) r90_k1
	reaction_90: EGF_pEGFR_2_pShc_Grb2_SHP2() + RhoGAP(p~P,rhog,src) <-> EGF_pEGFR_2_pShc_Grb2_SHP2_pRhoGAP() r91_k1,r91_k2
	reaction_91: EGF_pEGFR_2_pShc_Grb2_SHP2_pRhoGAP() -> EGF_pEGFR_2_pShc_Grb2_SHP2() + RhoGAP(p~0,rhog,src) r92_k1
	reaction_92: EGF_pEGFR_2_Grb2_SHP2() + RhoGEF(p~P,rasg,rhog,src) <-> EGF_pEGFR_2_Grb2_SHP2_pRhoGEF() r93_k1,r93_k2
	reaction_93: EGF_pEGFR_2_Grb2_SHP2_pRhoGEF() -> EGF_pEGFR_2_Grb2_SHP2() + RhoGEF(p~0,rasg,rhog,src) r94_k1
	reaction_94: EGF_pEGFR_2_Grb2_SHP2() + RhoGAP(p~P,rhog,src) <-> EGF_pEGFR_2_Grb2_SHP2_pRhoGAP() r95_k1,r95_k2
	reaction_95: EGF_pEGFR_2_Grb2_SHP2_pRhoGAP() -> EGF_pEGFR_2_Grb2_SHP2() + RhoGAP(p~0,rhog,src) r96_k1
	reaction_96: EGF_pEGFF_2(EGF_pEGFR2_RasGAP~EGF_pEGFR2_RasGAP,EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPef~0,EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPef~0,EGF_pEGRF_2~0,_~_,rasg) + SHP2() <-> EGF_pEGFR_2_RasGAP_SHP2() r97_k1,r97_k2
	reaction_97: EGF_pEGFR_2_RasGAP_SHP2() -> EGF_EGFR_2() + RasGAP(rasg) + SHP2() r98_k1
	reaction_98: Src(p~P,rhogap,rhogef,tp7) + RhoGEF(p~0,rasg,rhog,src) <-> RhoGEF(p~0,rasg,rhog,src!366).Src(p~P,rhogap,rhogef!366,tp7) r99_k1,r99_k2
	reaction_99: RhoGEF(p~0,rasg,rhog,src!366).Src(p~P,rhogap,rhogef!366,tp7) -> Src(p~P,rhogap,rhogef,tp7) + RhoGEF(p~P,rasg,rhog,src) r100_k1
	reaction_100: RhoGEF(p~P,rasg,rhog,src) -> RhoGEF(p~0,rasg,rhog,src) r101_k1
	reaction_101: Src(p~P,rhogap,rhogef,tp7) + RhoGAP(p~0,rhog,src) <-> Src(p~P,rhogap!367,rhogef,tp7).RhoGAP(p~0,rhog,src!367) r102_k1,r102_k2
	reaction_102: Src(p~P,rhogap!367,rhogef,tp7).RhoGAP(p~0,rhog,src!367) -> Src(p~P,rhogap,rhogef,tp7) + RhoGAP(p~P,rhog,src) r103_k1
	reaction_103: RhoGAP(p~P,rhog,src) + RhoG(dp~0,rhogap,rhogdi,rhogef,rok,tp~TP) <-> RhoG(dp~0,rhogap!375,rhogdi,rhogef,rok,tp~TP).RhoGAP(p~P,rhog!375,src) r104_k1,r104_k2
	reaction_104: RhoG(dp~0,rhogap!375,rhogdi,rhogef,rok,tp~TP).RhoGAP(p~P,rhog!375,src) -> RhoGAP(p~P,rhog,src) + RhoG(dp~DP,rhogap,rhogdi,rhogef,rok,tp~0) r105_k1
	reaction_105: RhoG(dp~0,rhogap,rhogdi,rhogef,rok,tp~TP) + ROK(epn,erk,p~0,pten,rhog) <-> RhoG(dp~0,rhogap,rhogdi,rhogef,rok!365,tp~TP).ROK(epn,erk,p~0,pten,rhog!365) r106_k1,r106_k2
	reaction_106: RhoG(dp~0,rhogap,rhogdi,rhogef,rok!365,tp~TP).ROK(epn,erk,p~0,pten,rhog!365) -> RhoG(dp~0,rhogap,rhogdi,rhogef,rok,tp~TP) + ROK(epn,erk,p~P,pten,rhog) r107_k1
	reaction_107: EGF_pEGFR_2() + Src(p~0,rhogap,rhogef,tp7) <-> EGF_pEGFR_2_Src() r108_k1,r108_k2
	reaction_108: EGF_pEGFR_2_Src() -> EGF_pEGFR_2_pSrc() r109_k1
	reaction_109: EGF_pEGFR_2() <-> EGF_pEGFF_2(EGF_pEGFR2_RasGAP~0,EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPef~0,EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPef~0,EGF_pEGRF_2~EGF_pEGRF_2,_~0,rasg) + Src(p~P,rhogap,rhogef,tp7) r110_k1,r110_k2
	reaction_110: Src(p~P,rhogap,rhogef,tp7) + TP7(src) <-> Src(p~P,rhogap,rhogef,tp7!351).TP7(src!351) r111_k1,r111_k2
	reaction_111: Src(p~P,rhogap,rhogef,tp7!351).TP7(src!351) -> Src(p~0,rhogap,rhogef,tp7!351).TP7(src!351) r112_k1
	reaction_112: Src(p~0,rhogap,rhogef,tp7!351).TP7(src!351) <-> Src(p~0,rhogap,rhogef,tp7) + TP7(src) r113_k1,r113_k2
	reaction_113: EGF_pEGFR_2_pShc_Grb2_SOS() + Cbl_CIN85() <-> EGF_pEGFR_2_pShc_Grb2_SOS_Cbl_CIN85() r114_k1,r114_k2
	reaction_114: EGF_pEGFR_2_Grb2_SOS() + Cbl_CIN85() <-> EGF_pEGFR_2_Grb2_SOS_Cbl_CIN85() r115_k1,r115_k2
	reaction_115: EGF_pEGFR_2_pShc_Grb2_SOS_Cbl_CIN85() + EPn(mpase,p~0,rok) <-> EGF_pEGFR_2_pShc_Grb2_SOS_Cbl_CIN85_EPn() r116_k1,r116_k2
	reaction_116: EGF_pEGFR_2_Grb2_SOS_Cbl_CIN85() + EPn(mpase,p~0,rok) <-> EGF_pEGFR_2_Grb2_SOS_Cbl_CIN85_EPn() r117_k1,r117_k2
	reaction_117: EGF_pEGFR_2_pShc_Grb2_SOS_Cbl_CIN85_EPn() -> EGF_pEGFR_2_degrade() + Cbl_CIN85() + EPn(mpase,p~0,rok) + pShc_Grb2_SOS() r118_k1
	reaction_118: EGF_pEGFR_2_Grb2_SOS_Cbl_CIN85_EPn() -> EGF_pEGFR_2_degrade() + Cbl_CIN85() + EPn(mpase,p~0,rok) + SOS(grb2!64,p~0).Grb2(mekk1abcdef,sos!64) r119_k1
	reaction_119: EGFR(egf,p~0,pro_~PRO_) -> EGFR(egf,p~0,pro_~0) r120_k1
	reaction_120: ROK(epn,erk,p~P,pten,rhog) + EPn(mpase,p~0,rok) <-> ROK(epn!357,erk,p~P,pten,rhog).EPn(mpase,p~0,rok!357) r121_k1,r121_k2
	reaction_121: ROK(epn!357,erk,p~P,pten,rhog).EPn(mpase,p~0,rok!357) -> ROK(epn,erk,p~P,pten,rhog) + EPn(mpase,p~P,rok) r122_k1
	reaction_122: EPn(mpase,p~P,rok) + MPase(epn) <-> EPn(mpase!353,p~P,rok).MPase(epn!353) r123_k1,r123_k2
	reaction_123: EPn(mpase!353,p~0,rok).MPase(epn!353) -> EPn(mpase,p~0,rok) + MPase(epn) r124_k1
	reaction_124: RasG(dp~0,egf_pegff_2,raf,rasgap,rhogef,tp~TP) + RhoGEF(p~0,rasg,rhog,src) <-> RasG(dp~0,egf_pegff_2,raf,rasgap,rhogef!372,tp~TP).RhoGEF(p~0,rasg!372,rhog,src) r125_k1,r125_k2
	reaction_125: RasG(dp~0,egf_pegff_2,raf,rasgap,rhogef!372,tp~TP).RhoGEF(p~0,rasg!372,rhog,src) -> RasG(dp~0,egf_pegff_2,raf,rasgap,rhogef,tp~TP) + RhoGEF(p~P,rasg,rhog,src) r126_k1
	reaction_126: ERK(mek,mkp3,p~0,phospho~PP,rok) + ROK(epn,erk,p~P,pten,rhog) <-> ERK(mek,mkp3,p~0,phospho~PP,rok!373).ROK(epn,erk!373,p~P,pten,rhog) r127_k1,r127_k2
	reaction_127: ERK(mek,mkp3,p~0,phospho~PP,rok!373).ROK(epn,erk!373,p~P,pten,rhog) -> ERK(mek,mkp3,p~0,phospho~PP,rok) + ROK(epn,erk,p~0,pten,rhog) r128_k1
	reaction_128: Grb2(mekk1abcdef,sos) + MEKK1abcdef(grb2) <-> Grb2(mekk1abcdef!355,sos).MEKK1abcdef(grb2!355) r129_k1,r129_k2
	reaction_129: EGF_pEGFR_2_pShc() + Grb2(mekk1abcdef!355,sos).MEKK1abcdef(grb2!355) <-> EGF_pEGFR_2_pShc_Grb2_MEKK1abcdef() r130_k1,r130_k2
	reaction_130: EGF_pEGFR_2() + Grb2(mekk1abcdef!355,sos).MEKK1abcdef(grb2!355) <-> EGF_pEGFR_2_Grb2_MEKK1abcdef() r131_k1,r131_k2
	reaction_131: EGF_pEGFR_2_pShc_Grb2_MEKK1abcdef() + MEK(erk,p~0,phospho~0,pp2a,raf) <-> EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdef() r132_k1,r132_k2
	reaction_132: EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdef() -> EGF_pEGFR_2_pShc_Grb2_MEKK1abpMEKcdef() r133_k1
	reaction_133: EGF_pEGFR_2_pShc_Grb2_MEKK1abpMEKcdef() -> EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdef() r134_k1
	reaction_134: EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdef() <-> EGF_pEGFR_2_pShc_Grb2_MEKK1abcdef() + MEK(erk,p~0,phospho~PP,pp2a,raf) r135_k1,r135_k2
	reaction_135: EGF_pEGFR_2_Grb2_MEKK1abcdef() + MEK(erk,p~0,phospho~0,pp2a,raf) <-> EGF_pEGFR_2_Grb2_MEKK1abMEKcdef() r136_k1,r136_k2
	reaction_136: EGF_pEGFR_2_Grb2_MEKK1abMEKcdef() -> EGF_pEGFR_2_Grb2_MEKK1abpMEKcdef() r137_k1
	reaction_137: EGF_pEGFR_2_Grb2_MEKK1abpMEKcdef() -> EGF_pEGFR_2_Grb2_MEKK1abppMEKcdef() r138_k1
	reaction_138: EGF_pEGFR_2_Grb2_MEKK1abppMEKcdef() <-> EGF_pEGFR_2_Grb2_MEKK1abcdef() + MEK(erk,p~0,phospho~PP,pp2a,raf) r139_k1,r139_k2
	reaction_139: EGF_pEGFR_2_pShc_Grb2_MEKK1abcdef() + Raf(mek,p~0,pase,phospho~0,pp~0,rasg) <-> EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdef() r140_k1,r140_k2
	reaction_140: EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdef() + MEK(erk,p~0,phospho~0,pp2a,raf) <-> EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbMEKcdef() r141_k1,r141_k2
	reaction_141: EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbMEKcdef() -> EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbpMEKcdef() r142_k1
	reaction_142: EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbpMEKcdef() -> EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcdef() r143_k1
	reaction_143: EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcdef() <-> EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdef() + MEK(erk,p~0,phospho~PP,pp2a,raf) r144_k1,r144_k2
	reaction_144: EGF_pEGFR_2_Grb2_MEKK1abcdef() + Raf(mek,p~0,pase,phospho~0,pp~0,rasg) <-> EGF_pEGFR_2_Grb2_MEKK1aRafbcdef() r145_k1,r145_k2
	reaction_145: EGF_pEGFR_2_Grb2_MEKK1aRafbcdef() + MEK(erk,p~0,phospho~0,pp2a,raf) <-> EGF_pEGFR_2_Grb2_MEKK1aRafbMEKcdef() r146_k1,r146_k2
	reaction_146: EGF_pEGFR_2_Grb2_MEKK1aRafbMEKcdef() -> EGF_pEGFR_2_Grb2_MEKK1aRafbpMEKcdef() r147_k1
	reaction_147: EGF_pEGFR_2_Grb2_MEKK1aRafbpMEKcdef() -> EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcdef() r148_k1
	reaction_148: EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcdef() <-> EGF_pEGFR_2_Grb2_MEKK1aRafbcdef() + MEK(erk,p~0,phospho~PP,pp2a,raf) r149_k1,r149_k2
	reaction_149: EGF_pEGFR_2_pShc_Grb2_MEKK1abcdef() + RasG(dp~0,egf_pegff_2,raf,rasgap,rhogef,tp~TP) <-> EGF_pEGFR_2_pShc_Grb2_MEKK1abcdefRasGTP() r150_k1,r150_k2
	reaction_150: EGF_pEGFR_2_pShc_Grb2_MEKK1abcdefRasGTP() + MEK(erk,p~0,phospho~0,pp2a,raf) <-> EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdefRasGTP() r151_k1,r151_k2
	reaction_151: EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdefRasGTP() -> EGF_pEGFR_2_pShc_Grb2_MEKK1abpMEKcdefRasGTP() r152_k1
	reaction_152: EGF_pEGFR_2_pShc_Grb2_MEKK1abpMEKcdefRasGTP() -> EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdefRasGTP() r153_k1
	reaction_153: EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdefRasGTP() <-> EGF_pEGFR_2_pShc_Grb2_MEKK1abcdefRasGTP() + MEK(erk,p~0,phospho~PP,pp2a,raf) r154_k1,r154_k2
	reaction_154: EGF_pEGFR_2_Grb2_MEKK1abcdef() + RasG(dp~0,egf_pegff_2,raf,rasgap,rhogef,tp~TP) <-> EGF_pEGFR_2_Grb2_MEKK1abcdefRasGTP() r155_k1,r155_k2
	reaction_155: EGF_pEGFR_2_Grb2_MEKK1abcdefRasGTP() + MEK(erk,p~0,phospho~0,pp2a,raf) <-> EGF_pEGFR_2_Grb2_MEKK1abMEKcdefRasGTP() r156_k1,r156_k2
	reaction_156: EGF_pEGFR_2_Grb2_MEKK1abMEKcdefRasGTP() -> EGF_pEGFR_2_Grb2_MEKK1abpMEKcdefRasGTP() r157_k1
	reaction_157: EGF_pEGFR_2_Grb2_MEKK1abpMEKcdefRasGTP() -> EGF_pEGFR_2_Grb2_MEKK1abppMEKcdefRasGTP() r158_k1
	reaction_158: EGF_pEGFR_2_Grb2_MEKK1abppMEKcdefRasGTP() <-> EGF_pEGFR_2_Grb2_MEKK1abcdefRasGTP() + MEK(erk,p~0,phospho~PP,pp2a,raf) r159_k1,r159_k2
	reaction_159: EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdefRasGTP() + ERK(mek,mkp3,p~0,phospho~0,rok) <-> EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcERKdefRasGTP() r160_k1,r160_k2
	reaction_160: EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcERKdefRasGTP() -> EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcpERKdefRasGTP() r161_k1
	reaction_161: EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcpERKdefRasGTP() -> EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcppERKdefRasGTP() r162_k1
	reaction_162: EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcppERKdefRasGTP() -> EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdefRasGTP() + ERK(mek,mkp3,p~0,phospho~PP,rok) r163_k1
	reaction_163: EGF_pEGFR_2_Grb2_MEKK1abppMEKcdefRasGTP() + ERK(mek,mkp3,p~0,phospho~0,rok) <-> EGF_pEGFR_2_Grb2_MEKK1abppMEKcERKdefRasGTP() r164_k1,r164_k2
	reaction_164: EGF_pEGFR_2_Grb2_MEKK1abppMEKcERKdefRasGTP() -> EGF_pEGFR_2_Grb2_MEKK1abppMEKcpERKdefRasGTP() r165_k1
	reaction_165: EGF_pEGFR_2_Grb2_MEKK1abppMEKcpERKdefRasGTP() -> EGF_pEGFR_2_Grb2_MEKK1abppMEKcppERKdefRasGTP() r166_k1
	reaction_166: EGF_pEGFR_2_Grb2_MEKK1abppMEKcppERKdefRasGTP() -> EGF_pEGFR_2_Grb2_MEKK1abppMEKcdefRasGTP() + ERK(mek,mkp3,p~0,phospho~PP,rok) r167_k1
	reaction_167: EGF_pEGFR_2_pShc_Grb2_MEKK1abcdef() + Raf(mek,p~P,pase,phospho~0,pp~0,rasg) <-> EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbcdef() r168_k1,r168_k2
	reaction_168: EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbcdef() + MEK(erk,p~0,phospho~0,pp2a,raf) <-> EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbMEKcdef() r169_k1,r169_k2
	reaction_169: EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbMEKcdef() -> EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbpMEKcdef() r170_k1
	reaction_170: EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbpMEKcdef() -> EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbppMEKcdef() r171_k1
	reaction_171: EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbppMEKcdef() <-> EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbcdef() + MEK(erk,p~0,phospho~PP,pp2a,raf) r172_k1,r172_k2
	reaction_172: EGF_pEGFR_2_Grb2_MEKK1abcdef() + Raf(mek,p~P,pase,phospho~0,pp~0,rasg) <-> EGF_pEGFR_2_Grb2_MEKK1apRafbcdef() r173_k1,r173_k2
	reaction_173: EGF_pEGFR_2_Grb2_MEKK1apRafbcdef() + MEK(erk,p~0,phospho~0,pp2a,raf) <-> EGF_pEGFR_2_Grb2_MEKK1apRafbMEKcdef() r174_k1,r174_k2
	reaction_174: EGF_pEGFR_2_Grb2_MEKK1apRafbMEKcdef() -> EGF_pEGFR_2_Grb2_MEKK1apRafbpMEKcdef() r175_k1
	reaction_175: EGF_pEGFR_2_Grb2_MEKK1apRafbpMEKcdef() -> EGF_pEGFR_2_Grb2_MEKK1apRafbppMEKcdef() r176_k1
	reaction_176: EGF_pEGFR_2_Grb2_MEKK1apRafbppMEKcdef() <-> EGF_pEGFR_2_Grb2_MEKK1apRafbcdef() + MEK(erk,p~0,phospho~PP,pp2a,raf) r177_k1,r177_k2
	reaction_177: EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdef() + RhoG(dp~0,rhogap,rhogdi,rhogef,rok,tp~TP) <-> EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdRhoGTPef() r178_k1,r178_k2
	reaction_178: EGF_pEGFR_2_Grb2_MEKK1abMEKcdef() + RhoG(dp~0,rhogap,rhogdi,rhogef,rok,tp~TP) <-> EGF_pEGFR_2_Grb2_MEKK1abMEKcdRhoGTPef() r179_k1,r179_k2
	reaction_179: EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbMEKcdef() + RhoG(dp~0,rhogap,rhogdi,rhogef,rok,tp~TP) <-> EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbMEKcdRhoGTPef() r180_k1,r180_k2
	reaction_180: EGF_pEGFR_2_Grb2_MEKK1aRafbMEKcdef() + RhoG(dp~0,rhogap,rhogdi,rhogef,rok,tp~TP) <-> EGF_pEGFR_2_Grb2_MEKK1aRafbMEKcdRhoGTPef() r181_k1,r181_k2
	reaction_181: EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdef() + ERK(mek,mkp3,p~0,phospho~0,rok) <-> EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcERKdef() r182_k1,r182_k2
	reaction_182: EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcERKdef() -> EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcpERKdef() r183_k1
	reaction_183: EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcpERKdef() -> EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcppERKdef() r184_k1
	reaction_184: EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcppERKdef() -> EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdef() + ERK(mek,mkp3,p~0,phospho~PP,rok) r185_k1
	reaction_185: EGF_pEGFR_2_Grb2_MEKK1abppMEKcdef() + ERK(mek,mkp3,p~0,phospho~0,rok) <-> EGF_pEGFR_2_Grb2_MEKK1abppMEKcERKdef() r186_k1,r186_k2
	reaction_186: EGF_pEGFR_2_Grb2_MEKK1abppMEKcERKdef() -> EGF_pEGFR_2_Grb2_MEKK1abppMEKcpERKdef() r187_k1
	reaction_187: EGF_pEGFR_2_Grb2_MEKK1abppMEKcpERKdef() -> EGF_pEGFR_2_Grb2_MEKK1abppMEKcppERKdef() r188_k1
	reaction_188: EGF_pEGFR_2_Grb2_MEKK1abppMEKcppERKdef() -> EGF_pEGFR_2_Grb2_MEKK1abppMEKcdef() + ERK(mek,mkp3,p~0,phospho~PP,rok) r189_k1
	reaction_189: EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcdef() + ERK(mek,mkp3,p~0,phospho~0,rok) <-> EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcERKdef() r190_k1,r190_k2
	reaction_190: EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcERKdef() -> EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcpERKdef() r191_k1
	reaction_191: EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcpERKdef() -> EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcppERKdef() r192_k1
	reaction_192: EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcppERKdef() -> EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcdef() + ERK(mek,mkp3,p~0,phospho~PP,rok) r193_k1
	reaction_193: EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcdef() + ERK(mek,mkp3,p~0,phospho~0,rok) <-> EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcERKdef() r194_k1,r194_k2
	reaction_194: EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcERKdef() -> EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcpERKdef() r195_k1
	reaction_195: EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcpERKdef() -> EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcppERKdef() r196_k1
	reaction_196: EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcppERKdef() -> EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcdef() + ERK(mek,mkp3,p~0,phospho~PP,rok) r197_k1
	reaction_197: EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdRhoGTPef() + RhoGAP(p~P,rhog,src) <-> EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcdRhoGTPepRhoGAPf() r198_k1,r198_k2
	reaction_198: EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcdRhoGTPepRhoGAPf() -> EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcdef() + RhoG(dp~DP,rhogap,rhogdi,rhogef,rok,tp~0) + RhoGAP(p~P,rhog,src) r199_k1
	reaction_199: EGF_pEGFR_2_Grb2_MEKK1abppMEKcdRhoGTPef() + RhoGAP(p~P,rhog,src) <-> EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcdRhoGTPepRhoGAPf() r200_k1,r200_k2
	reaction_200: EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcdRhoGTPepRhoGAPf() -> EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcdef() + RhoG(dp~DP,rhogap,rhogdi,rhogef,rok,tp~0) + RhoGAP(p~P,rhog,src) r201_k1
	reaction_201: EGF_pEGFF_2(EGF_pEGFR2_RasGAP~0,EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPef~0,EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPef~EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPef,EGF_pEGRF_2~0,_~0,rasg) + RhoGAP(p~P,rhog,src) <-> EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPepRhoGAPf() r202_k1,r202_k2
	reaction_202: EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPepRhoGAPf() -> EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdef() + RhoG(dp~DP,rhogap,rhogdi,rhogef,rok,tp~0) + RhoGAP(p~P,rhog,src) r203_k1
	reaction_203: EGF_pEGFF_2(EGF_pEGFR2_RasGAP~0,EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPef~EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPef,EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPef~0,EGF_pEGRF_2~0,_~0,rasg) + RhoGAP(p~P,rhog,src) <-> EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPepRhoGAPf() r204_k1,r204_k2
	reaction_204: EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPepRhoGAPf() -> EGF_pEGFR_2_Grb2_MEKK1aRafbcdef() + RhoG(dp~DP,rhogap,rhogdi,rhogef,rok,tp~0) + RhoGAP(p~P,rhog,src) r205_k1
end reaction rules
end model
