###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000207', 'http://identifiers.org/biomodels.db/MODEL1111382868']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/10415827']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/2759']
#@BQB_IS_VERSION_OF:['http://identifiers.org/obo.go/GO:0000278', 'http://identifiers.org/kegg.pathway/hsa04110']
#@creatorEmail:'hdharuri@cds.caltech.edu'
#@creatorName:'Dharuri Harish'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 6 molecules and 6 reactions. The translated model has 6 molecules and 10 rules'
###
begin model
begin parameters
	Kc1 0.5 #units:uM
	V_M1 0.3 #units:min_1
	V_M3 0.1 #units:min_1
	Kc2 0.5 #units:uM
	U_M1 0.3 #units:min_1
	U_M3 0.1 #units:min_1
	vi1 0.05 #units:uM_min_1
	Kim1 0.03 #units:dimensionless
	vd1 0.025 #units:uM_min_1
	K_d1 0.02 #units:uM
	kd1 0.001 #units:min_1
	K1 0.01 #units:dimensionless
	V2 0.15 #units:min_1
	K2 0.01 #units:dimensionless
	K3 0.01 #units:dimensionless
	V4 0.05 #units:min_1
	K4 0.01 #units:dimensionless
	vi2 0.05 #units:uM_min_1
	Kim2 0.03 #units:dimensionless
	vd2 0.025 #units:uM_min_1
	K_d2 0.02 #units:uM
	kd2 0.001 #units:min_1
	H1 0.01 #units:dimensionless
	U2 0.15 #units:min_1
	H2 0.01 #units:dimensionless
	H3 0.01 #units:dimensionless
	U4 0.05 #units:min_1
	H4 0.01 #units:dimensionless
end parameters
begin molecule types
	cdk1()
	#^ bqbiol:isVersionOf uniprot:P24864
	cyclinE()
	#^ bqbiol:isVersionOf uniprot:Q8WWL7
	cyclinB()
	Ubiquitinligase2()
	ubiquitinligase()
	cdk2()
end molecule types
begin seed species
	cyclinB() 1.2044e+24 # 2.0mol/L * 6.022e23/mol *1.0L #cyclinB #C1
	cdk1() 1.0 #cdk1 #M1
end seed species
begin observables
	Species cyclinB cyclinB() #cyclinB
	Species cdk1 cdk1() #cdk1
	Species ubiquitinligase ubiquitinligase() #ubiquitin ligase
	Species cyclinE cyclinE() #cyclinE
	Species cdk2 cdk2() #cdk2
	Species Ubiquitinligase2 Ubiquitinligase2() #Ubiquitin ligase 2
end observables
begin functions
	U3() = U_M3*cdk2
	arRateX2() = U3*(1 - Ubiquitinligase2)/(H3 - Ubiquitinligase2 + 1) - U4*Ubiquitinligase2/(H4 + Ubiquitinligase2)
	U1() = U_M1*cyclinE/(Kc2 + cyclinE)
	arRateM2() = U1*(1 - cdk2)/(H1 - cdk2 + 1) - U2*cdk2/(H2 + cdk2)
	V3() = V_M3*cdk1
	arRateX1() = V3*(1 - ubiquitinligase)/(K3 - ubiquitinligase + 1) - V4*ubiquitinligase/(K4 + ubiquitinligase)
	V1() = V_M1*cyclinB/(Kc1 + cyclinB)
	arRateM1() = V1*(1 - cdk1)/(K1 - cdk1 + 1) - V2*cdk1/(K2 + cdk1)
	fRate0() = Kim1*vi1/(Kim1 + cdk2)
	fRate1() = ubiquitinligase*vd1/(K_d1 + cyclinB)
	fRate3() = Kim2*vi2/(Kim2 + cdk1)
	fRate4() = Ubiquitinligase2*vd2/(K_d2 + cyclinE)
end functions
begin reaction rules
	R1: 0  -> cyclinB() fRate0() #Modifiers(M2)
	R2: cyclinB() -> 0  fRate1() #Modifiers(X1)
	R3: cyclinB() -> 0  kd1
	R8: 0  -> cyclinE() fRate3() #Modifiers(M1)
	R9: cyclinE() -> 0  fRate4() #Modifiers(X2)
	R10: cyclinE() -> 0  kd2
	0  -> cdk1() arRateM1 #rateLaw
	0  -> ubiquitinligase() arRateX1 #rateLaw
	0  -> cdk2() arRateM2 #rateLaw
	0  -> Ubiquitinligase2() arRateX2 #rateLaw
end reaction rules
end model
