###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000215', 'http://identifiers.org/biomodels.db/MODEL9284712021']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/19409816']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/10090']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0030217']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 7 molecules and 14 reactions. The translated model has 6 molecules and 14 rules'
###
begin model
begin parameters
	Ag 1.0 - time()**10/(time()**10 + 2.06437775405978e+15) #original 1.0mol/L
	r1_K1 0.460000
	r1_K2 2.100000
	r1_a2 0.420000
	r2_a3 0.000510
	r3_a1 0.044000
	r4_gamma_Tbet 1.000000
	r5_delta_Tbet 0.100000
	r6_gamma_Rec 1.000000
	r7_delta_Rec 0.100000
	r8_gamma_IFN 1.000000
	r9_delta_IFN 1.000000
	r10_b 100.000000
	r11_b 100.000000
	r12_b 100.000000
	r13_a4 0.002800
	r13_K4 0.013000
	r14_a5 3.700000
	r14_K5 0.029000
	r14_K6 66.000000
	r14_K7 0.014000
end parameters
begin molecule types
	#^ bqbiol:encodes uniprot:P97378
	#^ bqbiol:isVersionOf chebi:CHEBI:33699, kegg.compound:C00046
	Rec_mRNA()
	#^ bqbiol:isVersionOf chebi:CHEBI:33699, kegg.compound:C00046
	#^ bqbiol:encodes uniprot:P01580
	Ifn_mRNA()
	#^ bqbiol:isVersionOf uniprot:P97378
	Rec_Prot()
	#^ bqbiol:isVersionOf chebi:CHEBI:33699, kegg.compound:C00046
	#^ bqbiol:encodes uniprot:Q9JKD8
	Tbet_mRNA()
	#^ bqbiol:isVersionOf uniprot:Q9JKD8
	Tbet_Prot()
	#^ bqbiol:isVersionOf uniprot:P01580
	Ifn_Prot()
end molecule types
begin seed species
	Tbet_mRNA() 2.649680000000006e+22 # 0.0440000000000001mol/L * 6.022e23/mol *1.0L #Tbet_mRNA #Tbet_mRNA
	Tbet_Prot() 2.649680000000006e+25 #original 44.0000000000001mol/L #Tbet_Prot #Tbet_Prot
end seed species
begin observables
	Species Tbet_mRNA Tbet_mRNA() #Tbet_mRNA
	Species Ifn_mRNA Ifn_mRNA() #Ifn_mRNA
	Species Ifn_Prot Ifn_Prot() #Ifn_Prot
	Species Rec_Prot Rec_Prot() #Rec_Prot
	Species Tbet_Prot Tbet_Prot() #Tbet_Prot
	Species Rec_mRNA Rec_mRNA() #Rec_mRNA
end observables
begin functions
	Ag_ar() = 1 - time()^10/(time()^10 + 2064377754059776)
	fRate0() = 0.42*Ag_ar*Ifn_Prot/(Ag_ar*Ifn_Prot + 2.1*Ag_ar + 0.46*Ifn_Prot + 0.966)
	fRate1() = 0.00051*Rec_Prot
	fRate9() = 100.0*Tbet_mRNA
	fRate10() = 100.0*Ifn_mRNA
	fRate11() = 100.0*Rec_mRNA
	fRate12() = 3.64e-5*Tbet_Prot/(Ag_ar + 0.013)
	fRate13() = 3.7*Ag_ar*Rec_Prot*Tbet_Prot/(Ag_ar*Rec_Prot*Tbet_Prot + 0.029*Ag_ar*Rec_Prot + 66.0*Ag_ar*Tbet_Prot + 1.914*Ag_ar + 0.014*Rec_Prot*Tbet_Prot + 0.000406*Rec_Prot + 0.924*Tbet_Prot + 0.026796)
end functions
begin reaction rules
	vtrnldeg: 0  -> Tbet_mRNA() fRate0() #Modifiers(Ag, Ifn_Prot)
	reaction_1: 0  -> Tbet_mRNA() fRate1() #Modifiers(Rec_Prot)
	reaction_2: 0  -> Tbet_mRNA() r3_a1
	reaction_3: Tbet_mRNA() -> 0  r4_gamma_Tbet
	reaction_4: Tbet_Prot() -> 0  r5_delta_Tbet
	reaction_5: Rec_mRNA() -> 0  r6_gamma_Rec
	reaction_6: Rec_Prot() -> 0  r7_delta_Rec
	reaction_7: Ifn_mRNA() -> 0  r8_gamma_IFN
	reaction_8: Ifn_Prot() -> 0  r9_delta_IFN
	reaction_9: 0  -> Tbet_Prot() fRate9() #Modifiers(Tbet_mRNA)
	reaction_10: 0  -> Ifn_Prot() fRate10() #Modifiers(Ifn_mRNA)
	reaction_11: 0  -> Rec_Prot() fRate11() #Modifiers(Rec_mRNA)
	reaction_12: 0  -> Rec_mRNA() fRate12() #Modifiers(Tbet_Prot, Ag)
	reaction_13: 0  -> Ifn_mRNA() fRate13() #Modifiers(Tbet_Prot, Rec_Prot, Ag)
end reaction rules
end model
