###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL0606755064', 'http://identifiers.org/biomodels.db/BIOMD0000000229']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/12482327']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/biomodels.db/BIOMD0000000099']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/44689']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0006935', 'http://identifiers.org/go/GO:0019933']
#@BQB_HAS_PART:['http://identifiers.org/kegg.pathway/xcc02030']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 7 molecules and 14 reactions. The translated model has 7 molecules and 14 rules'
###
begin model
begin parameters
	k1 2.0
	k2 0.9
	k3 2.5
	k4 1.5
	k5 0.6
	k6 0.8
	k7 1.0
	k8 1.3
	k9 0.3
	k10 0.8
	k11 0.7
	k12 4.9
	k13 23.0
	k14 4.5
end parameters
begin molecule types
	#^ bqbiol:isVersionOf chebi:CHEBI:17489, kegg.compound:C000575
	incAMP()
	#^ bqbiol:isVersionOf interpro:IPR008172
	ACA()
	#^ bqbiol:is chebi:CHEBI:17489, kegg.compound:C000575
	excAMP()
	#^ bqbiol:isVersionOf uniprot:P13773
	CAR1()
	#^ bqbiol:isHomologTo uniprot:Q01386
	#^ bqbiol:isVersionOf interpro:IPR002373
	PKA()
	#^ bqbiol:isVersionOf uniprot:Q54QB1, interpro:IPR008349
	ERK2()
	#^ bqbiol:isVersionOf uniprot:Q23917
	REGA()
end molecule types
begin seed species
	ACA() 2.0414580000000002e+24 # 3.39mol/L * 6.022e23/mol *1.0L #ACA #ACA
	CAR1() 1.4753900000000002e+24 #original 2.45mol/L  #CAR1 #CAR1
	PKA() 9.635200000000002e+23 #original 1.6mol/L  #PKA #PKA
	incAMP() 7.2264e+23 #original 1.2mol/L  #incAMP #incAMP
	ERK2() 6.80486e+23 #original 1.13mol/L  #ERK2 #ERK2
	REGA() 5.4198e+23 #original 0.9mol/L  #REGA #REGA
	excAMP() 2.89056e+23 #original 0.48mol/L  #excAMP #excAMP
end seed species
begin observables
	Species ACA ACA() #ACA
	Species CAR1 CAR1() #CAR1
	Species PKA PKA() #PKA
	Species incAMP incAMP() #incAMP
	Species ERK2 ERK2() #ERK2
	Species REGA REGA() #REGA
	Species excAMP excAMP() #excAMP
end observables
begin functions
	fRate0() = CAR1*k1
	fRate1() = PKA*k2
	fRate2() = incAMP*k3
	fRate4() = CAR1*k5
	fRate5() = PKA*k6
	fRate7() = ERK2*k8
	fRate8() = ACA*k9
	fRate9() = REGA*k10
	fRate10() = ACA*k11
	fRate12() = excAMP*k13
end functions
begin reaction rules
	v1: 0  -> ACA() fRate0() #Modifiers(CAR1)
	v2: ACA() -> 0  fRate1() #Modifiers(PKA)
	v3: 0  -> PKA() fRate2() #Modifiers(incAMP)
	v4: PKA() -> 0  k4
	v5: 0  -> ERK2() fRate4() #Modifiers(CAR1)
	v6: ERK2() -> 0  fRate5() #Modifiers(PKA)
	v7: 0  -> REGA() k7
	v8: REGA() -> 0  fRate7() #Modifiers(ERK2)
	v9: 0  -> incAMP() fRate8() #Modifiers(ACA)
	v10: incAMP() -> 0  fRate9() #Modifiers(REGA)
	v11: 0  -> excAMP() fRate10() #Modifiers(ACA)
	v12: excAMP() -> 0  k12
	v13: 0  -> CAR1() fRate12() #Modifiers(excAMP)
	v14: CAR1() -> 0  k14
end reaction rules
end model
