###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1469251725', 'http://identifiers.org/biomodels.db/BIOMD0000000239']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/17514510']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0061178']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_HAS_PROPERTY:['http://identifiers.org/doid/DOID:9351']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 59 molecules and 45 reactions. The translated model has 40 molecules and 76 rules'
###
begin model
begin parameters
	flow 0.011
	r1_Glc_F 64.941000
	r4_V1 0.000500
	r4_K1GLC 0.000100
	r4_K1ATP 0.000063
	r5_V2 0.001500
	r5_K2 0.000000
	r5_k2 0.017000
	r5_K2ATP 0.000010
	r6_k3f 1.000000
	r6_k3b 0.050000
	r7_V4 0.010000
	r7_K4GAP 0.001000
	r7_K4NAD 0.001000
	r8_k5f 1000.000000
	r8_k5b 500.000000
	r9_V6 0.010000
	r9_K6PEP 0.000200
	r9_K6ADP 0.000300
	r10_k8f 1000.000000
	r10_k8b 0.143000
	r11_k9f 10000.000000
	r11_k9b 10000.000000
	r12_V 0.000000
	r12_K 0.000000
	r12_v8_PYC 0.000332
	r13_KmA 0.000025
	r13_KmB 0.000013
	r13_KmC 0.000050
	r13_KmP 0.000001
	r13_KmR 0.000001
	r13_Kia 0.000550
	r13_Kib 0.000300
	r13_Kic 0.000180
	r13_Kip 0.000060
	r13_Kiq 0.000035
	r13_Kir 0.000036
	r13_KcF 856.000000
	r13_v9_PDC 0.000000
	r14_V 0.005267
	r14_Ka 0.000012
	r14_Kb 0.000005
	r14_Kia 0.000010
	r14_Kib 0.000004
	r14_v10_CS 0.000000
	r15_Ks 0.000500
	r15_Kp 0.000110
	r15_KcF 20.470000
	r15_KcR 31.440000
	r15_v11_ACO 0.000000
	r16_KcF 105.000000
	r16_b 29.600000
	r16_c 0.000230
	r16_d 0.000078
	r16_e 0.000640
	r16_f 0.000360
	r16_v12_IDHa 0.000000
	r17_KmA 0.000220
	r17_KmB 0.000025
	r17_KmC 0.000050
	r17_KmP 0.000300
	r17_KmR 0.000600
	r17_Kia 0.000720
	r17_Kib 0.000740
	r17_Kic 0.000100
	r17_Kip 0.000001
	r17_Kiq 0.000081
	r17_Kir 0.000025
	r17_KcF 177.000000
	r17_v14_OGDC 0.000000
	r18_KmA 0.000005
	r18_KmB 0.000035
	r18_KmC 0.000450
	r18_KmP 0.000600
	r18_KmQ 0.000008
	r18_KmC2 0.000450
	r18_KmP2 0.000600
	r18_Keq 8.375000
	r18_Kia 0.000400
	r18_Kib 0.000020
	r18_Kic 0.000030
	r18_Kip 0.070000
	r18_Kiq 0.000005
	r18_Kir 0.000007
	r18_Kc1 100.000000
	r18_Kc2 100.000000
	r18_v15_SCS 0.000000
	r19_KmS1 0.000030
	r19_KmS2 0.000069
	r19_KmP1 0.000000
	r19_KmP2 0.000002
	r19_KiS1 0.000004
	r19_KiP2 0.000006
	r19_Keq 0.037000
	r19_KcF 69.300000
	r19_KcR 1.730000
	r19_v16_SDH 0.000099
	r20_Kp 0.000025
	r20_Ks 0.000005
	r20_KcF 800.000000
	r20_KcR 900.000000
	r20_v17_FM 0.000000
	r21_KmS1 0.000072
	r21_KmS2 0.000110
	r21_KmP1 0.001600
	r21_KmP2 0.000170
	r21_KiS1 0.000011
	r21_KiS2 0.000100
	r21_KiP1 0.007100
	r21_KiP2 0.001900
	r21_KcF 0.390000
	r21_KcR 0.040000
	r21_v18_MDH 0.000000
	r22_KmS1 0.002000
	r22_KmS2 0.000400
	r22_KmP1 0.032000
	r22_KmP2 0.000400
	r22_KiS1 0.008700
	r22_KiP2 0.012000
	r22_Keq 0.690000
	r22_KcF 337.000000
	r22_KcR 0.150000
	r22_v20_AlaTA 0.000000
	r23_KmS1 0.000900
	r23_KmS2 0.000100
	r23_KmP1 0.000040
	r23_KmP2 0.004000
	r23_KiS1 0.002000
	r23_KiP2 0.008300
	r23_Keq 6.200000
	r23_KcF 300.000000
	r23_KcR 1000.000000
	r23_v21_AspTA 0.000000
	r24_KiS1 0.000080
	r24_KiS2 0.003200
	r24_KiP1 0.000180
	r24_KiP2 0.002800
	r24_KcF 10.000000
	r24_KcR 10.000000
	r24_alpha 1.000000
	r24_beta 1.000000
	r24_gamma 1.000000
	r24_delta 1.000000
	r24_v22_AGC 0.000332
	r25_KmS1 0.000009
	r25_KmS2 0.000260
	r25_KmP1 0.000010
	r25_KmP2 0.000059
	r25_KiS1 0.000000
	r25_KiP2 0.000000
	r25_Keq 407.900000
	r25_KcF 498.000000
	r25_KcR 229.000000
	r25_v24_Complex_I 0.000332
	r26_KmA 0.000028
	r26_KmB 0.000003
	r26_Kb1 0.000005
	r26_Kb2 0.000006
	r26_Kq1 0.000003
	r26_Kq2 0.000002
	r26_k8 622.100000
	r26_KcF 426.800000
	r26_v25_Complex_III 0.000000
	r27_Ks 0.000110
	r27_KcF 0.000935
	r27_v26_Complex_IV 0.002325
	r28_V 0.004833
	r28_Ka 0.000005
	r28_Kb 0.000005
	r28_Kc 0.000039
	r28_Kia 0.000005
	r28_Kib 0.000005
	r28_Kid 0.004300
	r28_Keq 18000000.000000
	r28_v10_CS 0.000000
	r29_V 0.075000
	r29_Km 0.004500
	r29_Ki 0.047000
	r29_v28_Complex_V 0.003321
	r30_Ks 0.000500
	r30_Kp 0.000110
	r30_KcF 20.470000
	r30_KcR 31.440000
	r30_v29_ACO 0.000000
	r31_KiS1 0.000300
	r31_KiS2 0.000700
	r31_KiP1 0.001400
	r31_KiP2 0.000170
	r31_KcF 3.675000
	r31_KcR 4.830000
	r31_alpha 1.000000
	r31_beta 1.000000
	r31_gamma 1.000000
	r31_delta 1.000000
	r31_v30_OGC 0.000332
	r32_k1 34000000.000000
	r32_k2 35000000.000000
	r32_k3 4650.000000
	r32_k4 214.000000
	r32_kminus1 26.000000
	r32_kminus2 1400.000000
	r32_kminus3 570000.000000
	r32_kminus4 260000.000000
	r32_v31_MDH 0.000000
	r33_KmS1 0.000900
	r33_KmS2 0.000100
	r33_KmP1 0.000040
	r33_KmP2 0.004000
	r33_KiS1 0.002000
	r33_KiP2 0.008300
	r33_Keq 6.200000
	r33_KcF 300.000000
	r33_KcR 1000.000000
	r33_v32_AspTA 0.000000
	r34_KiS1 0.000130
	r34_KiS2 0.000440
	r34_KiP1 0.000330
	r34_KiP2 0.000042
	r34_KcF 5.600000
	r34_KcR 3.500000
	r34_alpha 1.000000
	r34_beta 1.000000
	r34_gamma 1.000000
	r34_delta 1.000000
	r34_v33_CIC 0.000332
	r35_KmS1 0.000000
	r35_KmS2 0.000000
	r35_KmP1 0.000000
	r35_KmP2 0.000000
	r35_KiS1 0.000000
	r35_KiP2 0.000000
	r35_Keq 0.660000
	r35_KcF 78.000000
	r35_KcR 101.000000
	r35_v34_ETF_QO 0.000033
	r36_KmS1 0.000039
	r36_KmS2 0.000000
	r36_KmP1 0.000001
	r36_KmP2 0.000024
	r36_KiS1 0.000076
	r36_KiS2 0.000000
	r36_KiP1 0.000075
	r36_KiP2 0.000012
	r36_Keq 8.990000
	r36_KcF 2.180000
	r36_KcR 0.300000
	r36_v35_ACD 0.000033
	r37_KmA 0.000110
	r37_KmB 0.001630
	r37_KmC 0.000370
	r37_KmP 0.016000
	r37_KmQ 0.000240
	r37_KmR 0.000051
	r37_Keq 9.000000
	r37_Kia 0.000150
	r37_Kib 0.001600
	r37_Kic 0.000130
	r37_Kip 0.007900
	r37_Kiq 0.000190
	r37_Kir 0.000240
	r37_KcF 200.000000
	r37_KcR 20.000000
	r37_v36_PC 0.000000
	r38_K 0.000034
	r38_V 0.000000
	r38_v37_GUT2P 0.001000
	r39_K 34.000000
	r39_V 0.039900
	r39_v38_GUT2P 0.001000
	r40_V 0.166700
	r40_K 0.012000
	r40_v40_AAC 0.000332
	r41_phi0 0.051000
	r41_phi1 0.000000
	r41_phi2 0.000001
	r41_phi12 0.000000
	r41_phir0 0.066000
	r41_phir1 0.000000
	r41_phir2 0.000029
	r41_phir3 0.000250
	r41_phir12 0.000000
	r41_phir13 0.000000
	r41_phir23 0.000000
	r41_phir123 0.000000
	r41_v41_IDHc 0.000000
	r42_KiS1 0.000130
	r42_KiS2 0.000440
	r42_KiP1 0.000330
	r42_KiP2 0.000042
	r42_KcF 5.600000
	r42_KcR 3.500000
	r42_alpha 1.000000
	r42_beta 1.000000
	r42_gamma 1.000000
	r42_delta 1.000000
	r42_v42_CIC 0.000332
	r43_V 1.116670
	r43_K 0.005000
	r43_v43_AAC 0.000332
	r44_Kcat 0.333000
	r44_Kmal 0.000125
	r44_Knadp 0.011000
	r44_v39_MDH 0.000000
	r45_Kcat 130.500000
	r45_Km 0.012950
	r45_v44_MDH 0.000000
end parameters
begin compartments
	#volume units: L
	CYTOPLASM 3 1.0 #cytoplasm
	MT_IMS 3 1.0 #mitochondrial intermembrane space
	MT_IM 3 1.0 #mitochondrial inner membrane
	MATRIX 3 1.0 #mitochondrial matrix
end compartments
begin molecule types
	#^ bqbiol:is kegg.compound:C01352, chebi:CHEBI:17877
	FADH2()
	#^ bqbiol:is kegg.compound:C00035, chebi:CHEBI:17552
	guanosinediphosphate()
	#^ bqbiol:is kegg.compound:C00044, chebi:CHEBI:15996
	guanosinetriphosphate()
	cytochromec(ferri~FERRI~0,ferro~FERRO~0)
	#^ bqbiol:is chebi:CHEBI:16908, kegg.compound:C00004, kegg.compound:C00004, chebi:CHEBI:16908
	NADH()
	#^ bqbiol:is kegg.compound:C00041, chebi:CHEBI:16977
	slanine()
	#^ bqbiol:is kegg.compound:C00042, chebi:CHEBI:15741
	succinate()
	#^ bqbiol:is kegg.compound:C00111, chebi:CHEBI:16108
	dihydrohxyacetone_phosphate()
	#^ bqbiol:is kegg.compound:C00016, chebi:CHEBI:16238
	FAD()
	#^ bqbiol:is chebi:CHEBI:18009, kegg.compound:C00006
	NADP(pl~PL~0)
	#^ bqbiol:is kegg.compound:C00009, chebi:CHEBI:18367
	phosphate()
	#^ bqbiol:is kegg.compound:C00311, chebi:CHEBI:30887, kegg.compound:C00311, chebi:CHEBI:30887
	isocitrate()
	#^ bqbiol:is kegg.compound:C00267, chebi:CHEBI:17925
	glucose()
	#^ bqbiol:is kegg.compound:C00036, chebi:CHEBI:30744, kegg.compound:C00036, chebi:CHEBI:30744
	oxaloacetate()
	#^ bqbiol:is kegg.compound:C00158, chebi:CHEBI:30769, kegg.compound:C00158, chebi:CHEBI:30769
	citrate()
	#^ bqbiol:is kegg.compound:C00149, chebi:CHEBI:30797, kegg.compound:C00149, chebi:CHEBI:30797
	malate()
	#^ bqbiol:is kegg.compound:C00091, chebi:CHEBI:15380
	succinyl_CoA()
	#^ bqbiol:is kegg.compound:C00085, chebi:CHEBI:15946
	fructose_6_phosphate()
	#^ bqbiol:is kegg.compound:C00236, chebi:CHEBI:16001
	s1_2_bisphospho_D_glycerate()
	#^ bqbiol:is kegg.compound:C00074, chebi:CHEBI:18021
	phosphoenolpyruvate()
	#^ bqbiol:is kegg.compound:C00186, chebi:CHEBI:422
	lactate()
	#^ bqbiol:is kegg.compound:C00093, chebi:CHEBI:15978
	glycerol_3_phosphate()
	#^ bqbiol:is kegg.compound:C00025, chebi:CHEBI:16015, kegg.compound:C00025, chebi:CHEBI:16015
	glutamate()
	#^ bqbiol:is kegg.compound:C00001, chebi:CHEBI:15377
	water()
	#^ bqbiol:is chebi:CHEBI:15846, kegg.compound:C00003
	NAD(pl~PL~0)
	#^ bqbiol:is kegg.compound:C00122, chebi:CHEBI:18012
	fumarate()
	#^ bqbiol:is kegg.compound:C04570
	electrontransferflavoprotein__reducedform__()
	ubiquino(l~L~0,ne~NE~0)
	#^ bqbiol:is kegg.compound:C04253
	electrontransferflavoprotein__oxidisedform__()
	#^ bqbiol:is kegg.compound:C00022, chebi:CHEBI:32816, kegg.compound:C00022, chebi:CHEBI:32816
	pyruvate()
	#^ bqbiol:is kegg.compound:C00118, chebi:CHEBI:29052
	glyceraldehyde3_phosphate(glyceraldehyde3_phosphate)
	#^ bqbiol:is kegg.compound:C0008, kegg.compound:C0008
	adeninediphosphate()
	#^ bqbiol:is kegg.compound:C00026, chebi:CHEBI:30915, kegg.compound:C00026, chebi:CHEBI:30915
	oxoglutarate()
	#^ bqbiol:is kegg.compound:C00020, chebi:CHEBI:16027
	adeninemonophosphate()
	#^ bqbiol:is kegg.compound:C00024, chebi:CHEBI:15351, kegg.compound:C00024, chebi:CHEBI:15351
	acetylCoA()
	#^ bqbiol:is kegg.compound:C00010, chebi:CHEBI:15346, kegg.compound:C00010, chebi:CHEBI:15346
	coenzymeA()
	#^ bqbiol:is kegg.compound:C0002, kegg.compound:C0002
	adeninetriphosphate()
	#^ bqbiol:is chebi:CHEBI:16474, kegg.compound:C00005, kegg.compound:C00005, chebi:CHEBI:16474
	NADPH()
	#^ bqbiol:is kegg.compound:C00011, chebi:CHEBI:16526
	carbondioxide()
	#^ bqbiol:is kegg.compound:C00049, chebi:CHEBI:17053, kegg.compound:C00049, chebi:CHEBI:17053
	aspartate()
end molecule types
begin seed species
	@CYTOPLASM:glucose()@CYTOPLASM 6.793839740000001e+18 # 1.12817e-05mol/L * 6.022e23/mol *1.0L #glucose #GLC
	@CYTOPLASM:fructose_6_phosphate()@CYTOPLASM 3.9708465800000006e+20 #original 0.00065939mol/L  #fructose_6_phosphate #F6P
	@CYTOPLASM:glyceraldehyde3_phosphate(glyceraldehyde3_phosphate!449)@CYTOPLASM.glyceraldehyde3_phosphate(glyceraldehyde3_phosphate!449)@CYTOPLASM 4.63775297e+18 #original 7.70135e-06mol/L  #fructose_1_6_bisphosphate #FBP
	@CYTOPLASM:glyceraldehyde3_phosphate(glyceraldehyde3_phosphate)@CYTOPLASM 1.149714218e+18 #original 1.90919e-06mol/L  #glyceraldehyde3_phosphate #GAP
	@CYTOPLASM:s1_2_bisphospho_D_glycerate()@CYTOPLASM 1.801234398e+20 #original 0.000299109mol/L  #s1_2_bisphospho_D_glycerate #DPG
	@CYTOPLASM:phosphoenolpyruvate()@CYTOPLASM 1.2721475e+18 #original 2.1125e-06mol/L  #phosphoenolpyruvate #PEP
	@CYTOPLASM:pyruvate()@MATRIX 2.545511444e+18 #original 4.22702e-06mol/L  #pyruvate #PYR_cyt
	@CYTOPLASM:adeninemonophosphate()@CYTOPLASM 1.572639278e+18 #original 2.61149e-06mol/L  #adeninemonophosphate #AMP
	@CYTOPLASM:lactate()@CYTOPLASM 2.04633582e+20 #original 0.00033981mol/L  #lactate #LAC
	@CYTOPLASM:glycerol_3_phosphate()@CYTOPLASM 4.6324235e+21 #original 0.0076925mol/L  #glycerol_3_phosphate #G3P
	@CYTOPLASM:dihydrohxyacetone_phosphate()@CYTOPLASM 4.6324235e+21 #original 0.0076925mol/L  #dihydrohxyacetone_phosphate #DHAP
	@CYTOPLASM:oxaloacetate()@MATRIX 2.4088e+18 #original 4e-06mol/L  #oxaloacetate #OXA_cyt
	@CYTOPLASM:aspartate()@CYTOPLASM 6.86508e+20 #original 0.00114mol/L  #aspartate #Asp_cyt
	@CYTOPLASM:glutamate()@CYTOPLASM 1.8246660000000002e+21 #original 0.00303mol/L  #glutamate #Glu_cyt
	@CYTOPLASM:oxoglutarate()@CYTOPLASM 1.26462e+19 #original 2.1e-05mol/L  #oxoglutarate #OG_cyt
	@CYTOPLASM:malate()@MATRIX 3.011e+20 #original 0.0005mol/L  #malate #Mal_cyt
	@CYTOPLASM:acetylCoA()@CYTOPLASM 1.8066000000000002e+19 #original 3e-05mol/L  #acetylCoA #Acetyl_CoA_cyt
	@CYTOPLASM:coenzymeA()@CYTOPLASM 1.637984e+20 #original 0.000272mol/L  #coenzymeA #CoA_cyt
	@CYTOPLASM:isocitrate()@MATRIX 2.5292400000000003e+20 #original 0.00042mol/L  #isocitrate #IsoCitcyt
	@CYTOPLASM:citrate()@MATRIX 2.5292400000000003e+20 #original 0.00042mol/L  #citrate #Cit_cyt
	@CYTOPLASM:adeninetriphosphate()@CYTOPLASM 2.704263408e+21 #original 0.00449064mol/L  #adeninetriphosphate #ATP_cyt
	@CYTOPLASM:adeninediphosphate()@MATRIX 6.5258607400000004e+19 #original 0.000108367mol/L  #adeninediphosphate #ADP_cyt
	@CYTOPLASM:NAD(pl~0)@CYTOPLASM 2.1803072540000002e+21 #original 0.00362057mol/L  #NAD #NAD
	@CYTOPLASM:NADH()@CYTOPLASM 3.710262596e+20 #original 0.000616118mol/L  #NADH #NADH_cyt
	@CYTOPLASM:NADP(pl~0)@CYTOPLASM 2.1803072540000002e+21 #original 0.00362057mol/L  #NADP #NADP_cyt
	@CYTOPLASM:NADPH()@MATRIX 3.710262596e+20 #original 0.000616118mol/L  #NADPH #NADPH_cyt
	@MATRIX:pyruvate()@MATRIX 6.17255e+20 #original 0.001025mol/L  #pyruvate #Pyr
	@MATRIX:carbondioxide()@MATRIX 9.815860000000001e+20 #original 0.00163mol/L  #carbondioxide #CO2
	@MATRIX:coenzymeA()@CYTOPLASM 1.637984e+20 #original 0.000272mol/L  #coenzymeA #CoA
	@MATRIX:acetylCoA()@CYTOPLASM 1.8066000000000002e+19 #original 3e-05mol/L  #acetylCoA #Acetyl_CoA
	@MATRIX:phosphate()@MATRIX 2.4088e+21 #original 0.004mol/L  #phosphate #Pi
	@MATRIX:fumarate()@MATRIX 3.9143e+19 #original 6.5e-05mol/L  #fumarate #Fum
	@MATRIX:succinyl_CoA()@MATRIX 1.7710702e+20 #original 0.0002941mol/L  #succinyl_CoA #SCoA
	@MATRIX:succinate()@MATRIX 1.77649e+21 #original 0.00295mol/L  #succinate #Suc
	@MATRIX:guanosinetriphosphate()@MATRIX 2.7099e+21 #original 0.0045mol/L  #guanosinetriphosphate #GTP
	@MATRIX:guanosinediphosphate()@MATRIX 2.7099e+20 #original 0.00045mol/L  #guanosinediphosphate #GDP
	@MATRIX:slanine()@MATRIX 2.071568e+21 #original 0.00344mol/L  #slanine #Ala
	@MATRIX:aspartate()@CYTOPLASM 6.86508e+20 #original 0.00114mol/L  #aspartate #Asp
	@MATRIX:glutamate()@CYTOPLASM 1.8246660000000002e+21 #original 0.00303mol/L  #glutamate #Glu
	@MATRIX:water()@MATRIX 6.022e+20 #original 0.001mol/L  #water #H2O
	@MATRIX:electrontransferflavoprotein__reducedform__()@MATRIX 1.86682e+20 #original 0.00031mol/L  #electrontransferflavoprotein__reducedform__ #ETFred
	@MATRIX:electrontransferflavoprotein__oxidisedform__()@MATRIX 1.9270400000000003e+20 #original 0.00032mol/L  #electrontransferflavoprotein__oxidisedform__ #ETFox
	@MATRIX:FADH2()@MATRIX 4.33584e+19 #original 7.2e-05mol/L  #FADH2 #FADH2
	@MATRIX:FAD()@MATRIX 6.08222e+20 #original 0.00101mol/L  #FAD #FAD
	@MATRIX:oxoglutarate()@CYTOPLASM 1.26462e+19 #original 2.1e-05mol/L  #oxoglutarate #OG
	@MATRIX:malate()@MATRIX 3.011e+20 #original 0.0005mol/L  #malate #Mal
	@MATRIX:oxaloacetate()@MATRIX 2.4088e+18 #original 4e-06mol/L  #oxaloacetate #OXA
	@MATRIX:citrate()@MATRIX 2.5292400000000003e+20 #original 0.00042mol/L  #citrate #Cit
	@MATRIX:isocitrate()@MATRIX 2.5292400000000003e+20 #original 0.00042mol/L  #isocitrate #IsoCit
	@MATRIX:adeninetriphosphate()@CYTOPLASM 2.7099e+21 #original 0.0045mol/L  #adeninetriphosphate #ATP
	@MATRIX:adeninediphosphate()@MATRIX 2.7099e+20 #original 0.00045mol/L  #adeninediphosphate #ADP
	@MATRIX:NADP(pl~PL)@MATRIX 6.08222e+21 #original 0.0101mol/L  #NADPpl #NADP_p
	@MATRIX:NADPH()@MATRIX 4.33584e+19 #original 7.2e-05mol/L  #NADPH #NADPH
	@MATRIX:NAD(pl~PL)@MATRIX 6.08222e+21 #original 0.0101mol/L  #NADpl #NAD_p
	@MATRIX:NADH()@CYTOPLASM 4.3358400000000007e+20 #original 0.00072mol/L  #NADH #NADH
	@MT_IMS:ubiquino(l~0,ne~NE)@MT_IMS 1.56572e+22 #original 0.026mol/L  #ubiquinone #Q
	@MT_IMS:ubiquino(l~L,ne~0)@MT_IMS 1.6861600000000001e+22 #original 0.028mol/L  #ubiquinol #QH2
	@MT_IMS:cytochromec(ferri~0,ferro~FERRO)@MT_IMS 1.8066e+21 #original 0.003mol/L  #ferrocytochromec #Cytc3p
	@MT_IMS:cytochromec(ferri~FERRI,ferro~0)@MT_IMS 6.624200000000001e+19 #original 0.00011mol/L  #ferricytochromec #Cytc2p
end seed species
begin observables
	Species glucose_CYTOPLASM @CYTOPLASM:glucose()@CYTOPLASM #glucose
	Species fructose_6_phosphate_CYTOPLASM @CYTOPLASM:fructose_6_phosphate()@CYTOPLASM #fructose-6-phosphate
	Species fructose_1_6_bisphosphate_CYTOPLASM @CYTOPLASM:glyceraldehyde3_phosphate(glyceraldehyde3_phosphate!449)@CYTOPLASM.glyceraldehyde3_phosphate(glyceraldehyde3_phosphate!449)@CYTOPLASM #fructose-1,6-bisphosphate
	Species glyceraldehyde3_phosphate_CYTOPLASM @CYTOPLASM:glyceraldehyde3_phosphate(glyceraldehyde3_phosphate)@CYTOPLASM #glyceraldehyde 3-phosphate
	Species s1_2_bisphospho_D_glycerate_CYTOPLASM @CYTOPLASM:s1_2_bisphospho_D_glycerate()@CYTOPLASM #1,2-bisphospho-D-glycerate
	Species phosphoenolpyruvate_CYTOPLASM @CYTOPLASM:phosphoenolpyruvate()@CYTOPLASM #phosphoenolpyruvate
	Species pyruvate_CYTOPLASM @CYTOPLASM:pyruvate()@MATRIX #pyruvate
	Species adeninemonophosphate_CYTOPLASM @CYTOPLASM:adeninemonophosphate()@CYTOPLASM #adenine monophosphate
	Species lactate_CYTOPLASM @CYTOPLASM:lactate()@CYTOPLASM #lactate
	Species glycerol_3_phosphate_CYTOPLASM @CYTOPLASM:glycerol_3_phosphate()@CYTOPLASM #glycerol-3-phosphate
	Species dihydrohxyacetone_phosphate_CYTOPLASM @CYTOPLASM:dihydrohxyacetone_phosphate()@CYTOPLASM #dihydrohxyacetone-phosphate
	Species oxaloacetate_CYTOPLASM @CYTOPLASM:oxaloacetate()@MATRIX #oxaloacetate
	Species aspartate_CYTOPLASM @CYTOPLASM:aspartate()@CYTOPLASM #aspartate
	Species glutamate_CYTOPLASM @CYTOPLASM:glutamate()@CYTOPLASM #glutamate
	Species oxoglutarate_CYTOPLASM @CYTOPLASM:oxoglutarate()@CYTOPLASM #oxoglutarate
	Species malate_CYTOPLASM @CYTOPLASM:malate()@MATRIX #malate
	Species acetylCoA_CYTOPLASM @CYTOPLASM:acetylCoA()@CYTOPLASM #acetyl CoA
	Species coenzymeA_CYTOPLASM @CYTOPLASM:coenzymeA()@CYTOPLASM #coenzyme A
	Species isocitrate_CYTOPLASM @CYTOPLASM:isocitrate()@MATRIX #isocitrate
	Species citrate_CYTOPLASM @CYTOPLASM:citrate()@MATRIX #citrate
	Species adeninetriphosphate_CYTOPLASM @CYTOPLASM:adeninetriphosphate()@CYTOPLASM #adenine triphosphate
	Species adeninediphosphate_CYTOPLASM @CYTOPLASM:adeninediphosphate()@MATRIX #adenine diphosphate
	Species NAD_CYTOPLASM @CYTOPLASM:NAD(pl~0)@CYTOPLASM #NAD
	Species NADH_CYTOPLASM @CYTOPLASM:NADH()@CYTOPLASM #NADH
	Species NADP_CYTOPLASM @CYTOPLASM:NADP(pl~0)@CYTOPLASM #NADP
	Species NADPH_CYTOPLASM @CYTOPLASM:NADPH()@MATRIX #NADPH
	Species pyruvate_MATRIX @MATRIX:pyruvate()@MATRIX #pyruvate
	Species carbondioxide_MATRIX @MATRIX:carbondioxide()@MATRIX #carbon dioxide
	Species coenzymeA_MATRIX @MATRIX:coenzymeA()@CYTOPLASM #coenzyme A
	Species acetylCoA_MATRIX @MATRIX:acetylCoA()@CYTOPLASM #acetyl CoA
	Species phosphate_MATRIX @MATRIX:phosphate()@MATRIX #phosphate
	Species fumarate_MATRIX @MATRIX:fumarate()@MATRIX #fumarate
	Species succinyl_CoA_MATRIX @MATRIX:succinyl_CoA()@MATRIX #succinyl-CoA
	Species succinate_MATRIX @MATRIX:succinate()@MATRIX #succinate
	Species guanosinetriphosphate_MATRIX @MATRIX:guanosinetriphosphate()@MATRIX #guanosine triphosphate
	Species guanosinediphosphate_MATRIX @MATRIX:guanosinediphosphate()@MATRIX #guanosine diphosphate
	Species slanine_MATRIX @MATRIX:slanine()@MATRIX #slanine
	Species aspartate_MATRIX @MATRIX:aspartate()@CYTOPLASM #aspartate
	Species glutamate_MATRIX @MATRIX:glutamate()@CYTOPLASM #glutamate
	Species water_MATRIX @MATRIX:water()@MATRIX #water
	Species electrontransferflavoprotein__reducedform___MATRIX @MATRIX:electrontransferflavoprotein__reducedform__()@MATRIX #electron transfer flavoprotein (reduced form)
	Species electrontransferflavoprotein__oxidisedform___MATRIX @MATRIX:electrontransferflavoprotein__oxidisedform__()@MATRIX #electron transfer flavoprotein (oxidised form)
	Species FADH2_MATRIX @MATRIX:FADH2()@MATRIX #FADH2
	Species FAD_MATRIX @MATRIX:FAD()@MATRIX #FAD
	Species oxoglutarate_MATRIX @MATRIX:oxoglutarate()@CYTOPLASM #oxoglutarate
	Species malate_MATRIX @MATRIX:malate()@MATRIX #malate
	Species oxaloacetate_MATRIX @MATRIX:oxaloacetate()@MATRIX #oxaloacetate
	Species citrate_MATRIX @MATRIX:citrate()@MATRIX #citrate
	Species isocitrate_MATRIX @MATRIX:isocitrate()@MATRIX #isocitrate
	Species adeninetriphosphate_MATRIX @MATRIX:adeninetriphosphate()@CYTOPLASM #adenine triphosphate
	Species adeninediphosphate_MATRIX @MATRIX:adeninediphosphate()@MATRIX #adenine diphosphate
	Species NADPpl_MATRIX @MATRIX:NADP(pl~PL)@MATRIX #NADP+
	Species NADPH_MATRIX @MATRIX:NADPH()@MATRIX #NADPH
	Species NADpl_MATRIX @MATRIX:NAD(pl~PL)@MATRIX #NAD+
	Species NADH_MATRIX @MATRIX:NADH()@CYTOPLASM #NADH
	Species ubiquinone_MT_IMS @MT_IMS:ubiquino(l~0,ne~NE)@MT_IMS #ubiquinone
	Species ubiquinol_MT_IMS @MT_IMS:ubiquino(l~L,ne~0)@MT_IMS #ubiquinol
	Species ferrocytochromec_MT_IMS @MT_IMS:cytochromec(ferri~0,ferro~FERRO)@MT_IMS #ferrocytochrome c
	Species ferricytochromec_MT_IMS @MT_IMS:cytochromec(ferri~FERRI,ferro~0)@MT_IMS #ferricytochrome c
end observables
begin functions
	fRate0() = 0.064941*flow
	fRate3() = 0.0005/(adeninetriphosphate_CYTOPLASM*glucose_CYTOPLASM + 0.0001*adeninetriphosphate_CYTOPLASM + 6.3e-5*glucose_CYTOPLASM + 6.3e-9)
	fRate4() = 0.0015*adeninemonophosphate_CYTOPLASM^2*fructose_6_phosphate_CYTOPLASM/(adeninemonophosphate_CYTOPLASM^2*(adeninetriphosphate_CYTOPLASM*fructose_6_phosphate_CYTOPLASM^2 + 1.6e-9*adeninetriphosphate_CYTOPLASM + 1.0e-5*fructose_6_phosphate_CYTOPLASM^2 + 1.6e-14) + 2.72e-11*adeninetriphosphate_CYTOPLASM^3 + 2.72e-16*adeninetriphosphate_CYTOPLASM^2)
	fRate6() = 0.01/(NAD_CYTOPLASM*glyceraldehyde3_phosphate_CYTOPLASM + 0.001*NAD_CYTOPLASM + 0.001*glyceraldehyde3_phosphate_CYTOPLASM + 1.0e-6)
	fRate8() = 0.01/(adeninediphosphate_CYTOPLASM*phosphoenolpyruvate_CYTOPLASM + 0.0002*adeninediphosphate_CYTOPLASM + 0.0003*phosphoenolpyruvate_CYTOPLASM + 6.0e-8)
	fRate11() = 3.3211e-12/(pyruvate_CYTOPLASM + 1.5e-7)
	fRate12() = 9.483876121104e-27/(2.8674e-23*NADH_MATRIX*acetylCoA_MATRIX*pyruvate_MATRIX + 1.57707e-26*NADH_MATRIX*acetylCoA_MATRIX + 3.98475e-23*NADH_MATRIX*coenzymeA_MATRIX*pyruvate_MATRIX + 1.065636e-23*NADpl_MATRIX*acetylCoA_MATRIX*pyruvate_MATRIX + 2.86902e-23*NADpl_MATRIX*coenzymeA_MATRIX*pyruvate_MATRIX + 7.17255e-28*NADpl_MATRIX*coenzymeA_MATRIX + 3.729726e-28*NADpl_MATRIX*pyruvate_MATRIX + 1.43451e-27*coenzymeA_MATRIX*pyruvate_MATRIX)
	fRate13() = 2.03395739e-9/(acetylCoA_MATRIX*oxaloacetate_MATRIX + 4.8e-6*acetylCoA_MATRIX + 1.18e-5*oxaloacetate_MATRIX + 4.0e-11)
	fRate14() = 8.69538989e-10/(0.00011*citrate_MATRIX + 0.0005*isocitrate_MATRIX + 5.5e-8)
	fRate14m() = 6.0705924e-9/(0.00011*citrate_MATRIX + 0.0005*isocitrate_MATRIX + 5.5e-8)
	fRate15() = (0.00120021636*adeninediphosphate_MATRIX*isocitrate_MATRIX + 4.054785e-5*isocitrate_MATRIX^2)/(0.00064*adeninediphosphate_MATRIX*isocitrate_MATRIX + 7.8e-5*adeninediphosphate_MATRIX + isocitrate_MATRIX^2 + 0.00023*isocitrate_MATRIX + 0.00036)
	fRate16() = 6.57738491652e-26/(1.92456e-21*NADH_MATRIX*coenzymeA_MATRIX*oxoglutarate_MATRIX + 1.221e-19*NADH_MATRIX*oxoglutarate_MATRIX*succinyl_CoA_MATRIX + 8.7912e-23*NADH_MATRIX*succinyl_CoA_MATRIX + 9.6228e-22*NADpl_MATRIX*coenzymeA_MATRIX*oxoglutarate_MATRIX + 2.117016e-25*NADpl_MATRIX*coenzymeA_MATRIX + 2.97e-22*NADpl_MATRIX*oxoglutarate_MATRIX*succinyl_CoA_MATRIX + 2.4057e-26*NADpl_MATRIX*oxoglutarate_MATRIX + 4.8114e-26*coenzymeA_MATRIX*oxoglutarate_MATRIX)
	fRate17() = (2.70319e-6*succinate_MATRIX + 0.269636135889354)*(-0.119402985074627*coenzymeA_MATRIX*guanosinetriphosphate_MATRIX*succinate_MATRIX + 3.1415926535*guanosinediphosphate_MATRIX*succinyl_CoA_MATRIX)/(0.0335820895522388*coenzymeA_MATRIX*guanosinediphosphate_MATRIX*succinate_MATRIX + 16.4113049063433*coenzymeA_MATRIX*guanosinediphosphate_MATRIX + 2985.07462686567*coenzymeA_MATRIX*guanosinetriphosphate_MATRIX*succinate_MATRIX^2 + 1458784.4493864*coenzymeA_MATRIX*guanosinetriphosphate_MATRIX*succinate_MATRIX + 875.27795321393*coenzymeA_MATRIX*guanosinetriphosphate_MATRIX + 1.34328358208955e-5*coenzymeA_MATRIX*succinate_MATRIX + 0.00656452196253731*coenzymeA_MATRIX + 44.8863236214286*guanosinediphosphate_MATRIX*succinate_MATRIX*succinyl_CoA_MATRIX + 2.25e-7*guanosinediphosphate_MATRIX*succinate_MATRIX + 21935.5962660428*guanosinediphosphate_MATRIX*succinyl_CoA_MATRIX + 0.0001099557428725*guanosinediphosphate_MATRIX + 0.00642857142857143*guanosinetriphosphate_MATRIX*succinate_MATRIX*succinyl_CoA_MATRIX + 1.8e-5*guanosinetriphosphate_MATRIX*succinate_MATRIX + 3.1415926535*guanosinetriphosphate_MATRIX*succinyl_CoA_MATRIX + 0.0087964594298*guanosinetriphosphate_MATRIX + 3.21428571428571e-8*succinate_MATRIX*succinyl_CoA_MATRIX + 9.0e-11*succinate_MATRIX + 1.57079632675e-5*succinyl_CoA_MATRIX + 4.3982297149e-8)
	fRate18() = 1.01044521745121e-14/(5.8212e-10*fumarate_MATRIX*succinate_MATRIX + 1.591128e-9*fumarate_MATRIX*ubiquinol_MT_IMS + 2.386692e-15*fumarate_MATRIX + 1.4696696e-12*succinate_MATRIX*ubiquinone_MT_IMS + 1.014072024e-16*succinate_MATRIX + 7.87323e-12*ubiquinol_MT_IMS*ubiquinone_MT_IMS + 4.773384e-16*ubiquinol_MT_IMS + 4.4090088e-17*ubiquinone_MT_IMS)
	fRate18m() = 2.7309330201384e-13/(5.8212e-10*fumarate_MATRIX*succinate_MATRIX + 1.591128e-9*fumarate_MATRIX*ubiquinol_MT_IMS + 2.386692e-15*fumarate_MATRIX + 1.4696696e-12*succinate_MATRIX*ubiquinone_MT_IMS + 1.014072024e-16*succinate_MATRIX + 7.87323e-12*ubiquinol_MT_IMS*ubiquinone_MT_IMS + 4.773384e-16*ubiquinol_MT_IMS + 4.4090088e-17*ubiquinone_MT_IMS)
	fRate19() = 7.7234e-9/(2.5e-5*fumarate_MATRIX + 5.0e-6*malate_MATRIX + 1.25e-10)
	fRate19m() = 1.737765e-9/(2.5e-5*fumarate_MATRIX + 5.0e-6*malate_MATRIX + 1.25e-10)
	fRate20() = 3.2506863792e-19/(8.591e-12*NADH_MATRIX*NADpl_MATRIX*oxaloacetate_MATRIX + 3.101351e-21*NADH_MATRIX*oxaloacetate_MATRIX + 1.136e-9*NADH_MATRIX*(7.2e-5*NADpl_MATRIX + 1.21e-9) + 3.04e-10*NADpl_MATRIX*malate_MATRIX*oxaloacetate_MATRIX + 2.1584e-12*NADpl_MATRIX*malate_MATRIX + 1.554048e-16*NADpl_MATRIX + 2.37424e-16*malate_MATRIX + 1.3277e-14*oxaloacetate_MATRIX*(malate_MATRIX + 1.1e-5) + 2.611664e-21)
	fRate20m() = 1.327034588e-23/(8.591e-12*NADH_MATRIX*NADpl_MATRIX*oxaloacetate_MATRIX + 3.101351e-21*NADH_MATRIX*oxaloacetate_MATRIX + 1.37456e-18*NADH_MATRIX + 3.04e-10*NADpl_MATRIX*malate_MATRIX*oxaloacetate_MATRIX + 1.136e-9*NADpl_MATRIX*(7.2e-5*NADH_MATRIX + 0.0019*malate_MATRIX + 1.368e-7) + 7.81e-11*malate_MATRIX*(0.00017*oxaloacetate_MATRIX + 3.04e-6) + 1.46047e-19*oxaloacetate_MATRIX + 2.611664e-21)
	fRate21() = 1.406207084166e-9/(0.0351828*glutamate_MATRIX*pyruvate_MATRIX + 0.0016176*glutamate_MATRIX*slanine_MATRIX + 1.407312e-5*glutamate_MATRIX + 1.8009e-6*oxoglutarate_MATRIX*pyruvate_MATRIX + 1.08054e-5*oxoglutarate_MATRIX*slanine_MATRIX + 2.16108e-8*oxoglutarate_MATRIX + 0.0011258496*pyruvate_MATRIX + 4.32216e-9*slanine_MATRIX)
	fRate21m() = 2.0379812814e-9/(0.0351828*glutamate_MATRIX*pyruvate_MATRIX + 0.0016176*glutamate_MATRIX*slanine_MATRIX + 1.407312e-5*glutamate_MATRIX + 1.8009e-6*oxoglutarate_MATRIX*pyruvate_MATRIX + 1.08054e-5*oxoglutarate_MATRIX*slanine_MATRIX + 2.16108e-8*oxoglutarate_MATRIX + 0.0011258496*pyruvate_MATRIX + 4.32216e-9*slanine_MATRIX)
	fRate22() = 1.192338492e-5/(0.00996*aspartate_MATRIX*oxaloacetate_MATRIX + 0.00498*aspartate_MATRIX*oxoglutarate_MATRIX + 1.992e-5*aspartate_MATRIX + 0.10292*glutamate_MATRIX*oxaloacetate_MATRIX + 0.01116*glutamate_MATRIX*oxoglutarate_MATRIX + 9.2628e-5*glutamate_MATRIX + 1.0292e-5*oxaloacetate_MATRIX + 1.992e-7*oxoglutarate_MATRIX)
	fRate22m() = 1.9231266e-6/(0.00996*aspartate_MATRIX*oxaloacetate_MATRIX + 0.00498*aspartate_MATRIX*oxoglutarate_MATRIX + 1.992e-5*aspartate_MATRIX + 0.10292*glutamate_MATRIX*oxaloacetate_MATRIX + 0.01116*glutamate_MATRIX*oxoglutarate_MATRIX + 9.2628e-5*glutamate_MATRIX + 1.0292e-5*oxaloacetate_MATRIX + 1.992e-7*oxoglutarate_MATRIX)
	fRate23() = 1.6738344e-9/(1.44e-8*aspartate_CYTOPLASM*glutamate_CYTOPLASM + 2.56e-7*aspartate_CYTOPLASM*glutamate_MATRIX + 4.608e-11*aspartate_CYTOPLASM + 5.04e-7*aspartate_MATRIX*glutamate_CYTOPLASM + 8.96e-6*aspartate_MATRIX*glutamate_MATRIX + 1.6128e-9*aspartate_MATRIX + 4.032e-11*glutamate_CYTOPLASM + 7.168e-10*glutamate_MATRIX + 1.29024e-13)
	fRate23m() = 8.502016e-10/(1.44e-8*aspartate_CYTOPLASM*glutamate_CYTOPLASM + 2.56e-7*aspartate_CYTOPLASM*glutamate_MATRIX + 4.608e-11*aspartate_CYTOPLASM + 5.04e-7*aspartate_MATRIX*glutamate_CYTOPLASM + 8.96e-6*aspartate_MATRIX*glutamate_MATRIX + 1.6128e-9*aspartate_MATRIX + 4.032e-11*glutamate_CYTOPLASM + 7.168e-10*glutamate_MATRIX + 1.29024e-13)
	fRate24() = 3.17940500428657e-11/(2.879436e-9*NADH_MATRIX*NADpl_MATRIX + 1.922359278e-10*NADH_MATRIX*ubiquinone_MT_IMS + 4.9981341228e-14*NADH_MATRIX + 1.024884e-12*NADpl_MATRIX*ubiquinol_MT_IMS + 6.0468156e-17*NADpl_MATRIX + 1.804663812e-8*ubiquinol_MT_IMS*ubiquinone_MT_IMS + 1.01463516e-17*ubiquinol_MT_IMS + 1.76857053576e-15*ubiquinone_MT_IMS)
	fRate24m() = 7.794569757996e-14/(2.879436e-9*NADH_MATRIX*NADpl_MATRIX + 1.922359278e-10*NADH_MATRIX*ubiquinone_MT_IMS + 4.9981341228e-14*NADH_MATRIX + 1.024884e-12*NADpl_MATRIX*ubiquinol_MT_IMS + 6.0468156e-17*NADpl_MATRIX + 1.804663812e-8*ubiquinol_MT_IMS*ubiquinone_MT_IMS + 1.01463516e-17*ubiquinol_MT_IMS + 1.76857053576e-15*ubiquinone_MT_IMS)
	fRate25() = 4.2522084e-6*ferrocytochromec_MT_IMS*ubiquinol_MT_IMS/(ferricytochromec_MT_IMS*(1.92097733483363e-6*ferrocytochromec_MT_IMS*ubiquinol_MT_IMS + 5.32e-11*ferrocytochromec_MT_IMS + 1.03732776081016e-11*ubiquinol_MT_IMS + 3.0324e-16) + ferrocytochromec_MT_IMS*ubiquinol_MT_IMS + 2.8e-5*ferrocytochromec_MT_IMS + 3.0e-6*ubiquinol_MT_IMS)
	fRate26() = 2.173875e-6/(ferricytochromec_MT_IMS + 0.00011)
	fRate27() = 3.12988506597e-16*acetylCoA_CYTOPLASM*oxaloacetate_CYTOPLASM/(0.000405*acetylCoA_CYTOPLASM*oxaloacetate_CYTOPLASM + 1.8225e-9*acetylCoA_CYTOPLASM + 2.025e-9*oxaloacetate_CYTOPLASM + 9.1125e-15)
	fRate28() = 0.0002490825*adeninediphosphate_MATRIX/(21.2765957446809*adeninediphosphate_MATRIX^2 + adeninediphosphate_MATRIX + 0.0045)
	fRate29() = 8.69538989e-10/(0.00011*citrate_CYTOPLASM + 0.0005*isocitrate_CYTOPLASM + 5.5e-8)
	fRate29m() = 6.0705924e-9/(0.00011*citrate_CYTOPLASM + 0.0005*isocitrate_CYTOPLASM + 5.5e-8)
	fRate30() = 2.904800115e-10/(4.2e-7*malate_CYTOPLASM*oxoglutarate_CYTOPLASM + 2.38e-7*malate_CYTOPLASM*oxoglutarate_MATRIX + 7.14e-11*malate_CYTOPLASM + 2.1e-7*malate_MATRIX*oxoglutarate_CYTOPLASM + 1.19e-7*malate_MATRIX*oxoglutarate_MATRIX + 3.57e-11*malate_MATRIX + 2.94e-10*oxoglutarate_CYTOPLASM + 1.666e-10*oxoglutarate_MATRIX + 4.998e-14)
	fRate30m() = 3.36859173e-10/(4.2e-7*malate_CYTOPLASM*oxoglutarate_CYTOPLASM + 2.38e-7*malate_CYTOPLASM*oxoglutarate_MATRIX + 7.14e-11*malate_CYTOPLASM + 2.1e-7*malate_MATRIX*oxoglutarate_CYTOPLASM + 1.19e-7*malate_MATRIX*oxoglutarate_MATRIX + 3.57e-11*malate_MATRIX + 2.94e-10*oxoglutarate_CYTOPLASM + 1.666e-10*oxoglutarate_MATRIX + 4.998e-14)
	fRate31() = 457290542730000.0/(6.783e+20*NADH_CYTOPLASM*malate_CYTOPLASM*oxaloacetate_CYTOPLASM + 570000.0*NADH_CYTOPLASM*malate_CYTOPLASM + 5.78816e+18*NADH_CYTOPLASM*oxaloacetate_CYTOPLASM + 44019800000000.0*NADH_CYTOPLASM + 5.187e+18*NAD_CYTOPLASM*malate_CYTOPLASM*oxaloacetate_CYTOPLASM + 211333200000000.0*NAD_CYTOPLASM*malate_CYTOPLASM + 4.2315e+16*NAD_CYTOPLASM*oxaloacetate_CYTOPLASM + 40898000000.0*NAD_CYTOPLASM + 20748000000.0*malate_CYTOPLASM + 34828500000000.0*oxaloacetate_CYTOPLASM + 67663600.0)
	fRate31m() = 2083186341.6/(6.783e+20*NADH_CYTOPLASM*malate_CYTOPLASM*oxaloacetate_CYTOPLASM + 570000.0*NADH_CYTOPLASM*malate_CYTOPLASM + 5.78816e+18*NADH_CYTOPLASM*oxaloacetate_CYTOPLASM + 44019800000000.0*NADH_CYTOPLASM + 5.187e+18*NAD_CYTOPLASM*malate_CYTOPLASM*oxaloacetate_CYTOPLASM + 211333200000000.0*NAD_CYTOPLASM*malate_CYTOPLASM + 4.2315e+16*NAD_CYTOPLASM*oxaloacetate_CYTOPLASM + 40898000000.0*NAD_CYTOPLASM + 20748000000.0*malate_CYTOPLASM + 34828500000000.0*oxaloacetate_CYTOPLASM + 67663600.0)
	fRate32() = 1.192338492e-5/(0.00996*aspartate_CYTOPLASM*oxaloacetate_CYTOPLASM + 0.10292*aspartate_CYTOPLASM*oxoglutarate_CYTOPLASM + 1.0292e-5*aspartate_CYTOPLASM + 0.00498*glutamate_CYTOPLASM*oxaloacetate_CYTOPLASM + 0.01116*glutamate_CYTOPLASM*oxoglutarate_CYTOPLASM + 1.992e-7*glutamate_CYTOPLASM + 1.992e-5*oxaloacetate_CYTOPLASM + 9.2628e-5*oxoglutarate_CYTOPLASM)
	fRate32m() = 1.9231266e-6/(0.00996*aspartate_CYTOPLASM*oxaloacetate_CYTOPLASM + 0.10292*aspartate_CYTOPLASM*oxoglutarate_CYTOPLASM + 1.0292e-5*aspartate_CYTOPLASM + 0.00498*glutamate_CYTOPLASM*oxaloacetate_CYTOPLASM + 0.01116*glutamate_CYTOPLASM*oxoglutarate_CYTOPLASM + 1.992e-7*glutamate_CYTOPLASM + 1.992e-5*oxaloacetate_CYTOPLASM + 9.2628e-5*oxoglutarate_CYTOPLASM)
	fRate33() = 2.5654301904e-11/(1.8392e-8*citrate_CYTOPLASM*malate_CYTOPLASM + 1.3794e-8*citrate_CYTOPLASM*malate_MATRIX + 6.06936e-12*citrate_CYTOPLASM + 5.72e-8*citrate_MATRIX*malate_CYTOPLASM + 4.29e-8*citrate_MATRIX*malate_MATRIX + 1.8876e-11*citrate_MATRIX + 2.39096e-12*malate_CYTOPLASM + 1.79322e-12*malate_MATRIX + 7.890168e-16)
	fRate33m() = 6.6488422e-11/(1.8392e-8*citrate_CYTOPLASM*malate_CYTOPLASM + 1.3794e-8*citrate_CYTOPLASM*malate_MATRIX + 6.06936e-12*citrate_CYTOPLASM + 5.72e-8*citrate_MATRIX*malate_CYTOPLASM + 4.29e-8*citrate_MATRIX*malate_MATRIX + 1.8876e-11*citrate_MATRIX + 2.39096e-12*malate_CYTOPLASM + 1.79322e-12*malate_MATRIX + 7.890168e-16)
	fRate34() = 1.605923351604e-14/(9.828e-14*electrontransferflavoprotein__oxidisedform___MATRIX*electrontransferflavoprotein__reducedform___MATRIX + 7.254e-12*electrontransferflavoprotein__oxidisedform___MATRIX*ubiquinol_MT_IMS + 3.04668e-20*electrontransferflavoprotein__oxidisedform___MATRIX + 6.19938e-12*electrontransferflavoprotein__reducedform___MATRIX*ubiquinone_MT_IMS + 2.4177582e-18*electrontransferflavoprotein__reducedform___MATRIX + 6.406026e-12*ubiquinol_MT_IMS*ubiquinone_MT_IMS + 2.32128e-18*ubiquinol_MT_IMS + 1.9218078e-18*ubiquinone_MT_IMS)
	fRate34m() = 2.4332171994e-14/(9.828e-14*electrontransferflavoprotein__oxidisedform___MATRIX*electrontransferflavoprotein__reducedform___MATRIX + 7.254e-12*electrontransferflavoprotein__oxidisedform___MATRIX*ubiquinol_MT_IMS + 3.04668e-20*electrontransferflavoprotein__oxidisedform___MATRIX + 6.19938e-12*electrontransferflavoprotein__reducedform___MATRIX*ubiquinone_MT_IMS + 2.4177582e-18*electrontransferflavoprotein__reducedform___MATRIX + 6.406026e-12*ubiquinol_MT_IMS*ubiquinone_MT_IMS + 2.32128e-18*ubiquinol_MT_IMS + 1.9218078e-18*ubiquinone_MT_IMS)
	fRate35() = 3.19143618084259e-24/(5.85400032e-16*FADH2_MATRIX*electrontransferflavoprotein__oxidisedform___MATRIX*electrontransferflavoprotein__reducedform___MATRIX + 4.40806224096e-20*FADH2_MATRIX*electrontransferflavoprotein__oxidisedform___MATRIX + 1.13455365408e-20*FADH2_MATRIX*electrontransferflavoprotein__reducedform___MATRIX + 5.289674689152e-27*FADH2_MATRIX + 1.484608776e-13*FAD_MATRIX*electrontransferflavoprotein__oxidisedform___MATRIX*electrontransferflavoprotein__reducedform___MATRIX + 1.44465905376e-19*FAD_MATRIX*electrontransferflavoprotein__oxidisedform___MATRIX + 3.5630610624e-20*FAD_MATRIX*electrontransferflavoprotein__reducedform___MATRIX + 3.848105947392e-26*FAD_MATRIX + 1.7191442739744e-24*electrontransferflavoprotein__oxidisedform___MATRIX + 8.622607771008e-25*electrontransferflavoprotein__reducedform___MATRIX + 4.02015276375552e-31)
	fRate35m() = 3.54998462830099e-25/(5.85400032e-16*FADH2_MATRIX*electrontransferflavoprotein__oxidisedform___MATRIX*electrontransferflavoprotein__reducedform___MATRIX + 4.40806224096e-20*FADH2_MATRIX*electrontransferflavoprotein__oxidisedform___MATRIX + 1.13455365408e-20*FADH2_MATRIX*electrontransferflavoprotein__reducedform___MATRIX + 5.289674689152e-27*FADH2_MATRIX + 1.484608776e-13*FAD_MATRIX*electrontransferflavoprotein__oxidisedform___MATRIX*electrontransferflavoprotein__reducedform___MATRIX + 1.44465905376e-19*FAD_MATRIX*electrontransferflavoprotein__oxidisedform___MATRIX + 3.5630610624e-20*FAD_MATRIX*electrontransferflavoprotein__reducedform___MATRIX + 3.848105947392e-26*FAD_MATRIX + 1.7191442739744e-24*electrontransferflavoprotein__oxidisedform___MATRIX + 8.622607771008e-25*electrontransferflavoprotein__reducedform___MATRIX + 4.02015276375552e-31)
	fRate36() = (-0.000539195037778709*adeninediphosphate_MATRIX*oxaloacetate_MATRIX + 0.00154468*adeninetriphosphate_MATRIX*carbondioxide_MATRIX*pyruvate_MATRIX)/(222.222222222222*adeninediphosphate_MATRIX*carbondioxide_MATRIX*oxaloacetate_MATRIX + 11.5789473684211*adeninediphosphate_MATRIX*carbondioxide_MATRIX*pyruvate_MATRIX + 70.1687256333333*adeninediphosphate_MATRIX*oxaloacetate_MATRIX + 27.4208436458974*adeninediphosphate_MATRIX*pyruvate_MATRIX + 0.00356047167396667*adeninediphosphate_MATRIX + 9.16666666666667*adeninetriphosphate_MATRIX*carbondioxide_MATRIX*oxaloacetate_MATRIX + 20.0*adeninetriphosphate_MATRIX*carbondioxide_MATRIX*pyruvate_MATRIX + 0.0074*adeninetriphosphate_MATRIX*carbondioxide_MATRIX + 0.355555555555556*adeninetriphosphate_MATRIX*oxaloacetate_MATRIX + 0.0326*adeninetriphosphate_MATRIX*pyruvate_MATRIX + 10.5141977338889*carbondioxide_MATRIX*oxaloacetate_MATRIX + 0.877073903506329*carbondioxide_MATRIX*pyruvate_MATRIX + 0.016797294152*oxaloacetate_MATRIX + 0.00194949608552089*pyruvate_MATRIX)
	fRate37() = 3.99e-11*glycerol_3_phosphate_CYTOPLASM/(glycerol_3_phosphate_CYTOPLASM + 3.4e-5)
	fRate38() = 3.99e-5*NADH_CYTOPLASM/(NADH_CYTOPLASM + 34.0)
	fRate39() = 5.5362737e-5/(adeninediphosphate_CYTOPLASM + 0.012)
	fRate40() = 3.8617e-7/(0.051*NADP_CYTOPLASM*isocitrate_CYTOPLASM + 9.5e-8*NADP_CYTOPLASM + 9.6e-7*isocitrate_CYTOPLASM + 9.0e-8)
	fRate40m() = 3.8617e-7*carbondioxide_MATRIX/(0.066*NADPH_CYTOPLASM*carbondioxide_MATRIX*oxoglutarate_CYTOPLASM + 3.7e-7*NADPH_CYTOPLASM*carbondioxide_MATRIX + 0.00025*NADPH_CYTOPLASM*oxoglutarate_CYTOPLASM + 1.3e-10*NADPH_CYTOPLASM + 2.9e-5*carbondioxide_MATRIX*oxoglutarate_CYTOPLASM + 6.0e-12*carbondioxide_MATRIX + 9.4e-8*oxoglutarate_CYTOPLASM + 4.6e-14)
	fRate41() = 2.5654301904e-11/(1.8392e-8*isocitrate_CYTOPLASM*malate_CYTOPLASM + 1.3794e-8*isocitrate_CYTOPLASM*malate_MATRIX + 6.06936e-12*isocitrate_CYTOPLASM + 5.72e-8*isocitrate_MATRIX*malate_CYTOPLASM + 4.29e-8*isocitrate_MATRIX*malate_MATRIX + 1.8876e-11*isocitrate_MATRIX + 2.39096e-12*malate_CYTOPLASM + 1.79322e-12*malate_MATRIX + 7.890168e-16)
	fRate41m() = 6.6488422e-11/(1.8392e-8*isocitrate_CYTOPLASM*malate_CYTOPLASM + 1.3794e-8*isocitrate_CYTOPLASM*malate_MATRIX + 6.06936e-12*isocitrate_CYTOPLASM + 5.72e-8*isocitrate_MATRIX*malate_CYTOPLASM + 4.29e-8*isocitrate_MATRIX*malate_MATRIX + 1.8876e-11*isocitrate_MATRIX + 2.39096e-12*malate_CYTOPLASM + 1.79322e-12*malate_MATRIX + 7.890168e-16)
	fRate42() = 0.0003708572737/(adeninetriphosphate_MATRIX + 0.005)
	fRate43() = 1.2859461e-7/(NADP_CYTOPLASM*malate_CYTOPLASM + 0.000125*NADP_CYTOPLASM + 0.011*malate_CYTOPLASM + 1.375e-6)
	fRate44() = 5.0395185e-5*malate_MATRIX/(malate_MATRIX + 0.01295)
end functions
begin reaction rules
	GLCflow: 0  <-> glucose()@CYTOPLASM fRate0(),flow
	LACflow: lactate()@CYTOPLASM -> 0  flow
	GAPflow: glyceraldehyde3_phosphate(glyceraldehyde3_phosphate)@CYTOPLASM -> 0  flow
	v1: glucose()@CYTOPLASM + adeninetriphosphate()@CYTOPLASM -> fructose_6_phosphate()@CYTOPLASM + adeninediphosphate()@CYTOPLASM fRate3()
	v2: fructose_6_phosphate()@CYTOPLASM + adeninetriphosphate()@CYTOPLASM -> glyceraldehyde3_phosphate(glyceraldehyde3_phosphate!449)@CYTOPLASM.glyceraldehyde3_phosphate(glyceraldehyde3_phosphate!449)@CYTOPLASM + adeninediphosphate()@CYTOPLASM fRate4() #Modifiers(AMP)
	v3: glyceraldehyde3_phosphate(glyceraldehyde3_phosphate!449)@CYTOPLASM.glyceraldehyde3_phosphate(glyceraldehyde3_phosphate!449)@CYTOPLASM <-> glyceraldehyde3_phosphate(glyceraldehyde3_phosphate)@CYTOPLASM + glyceraldehyde3_phosphate(glyceraldehyde3_phosphate)@CYTOPLASM r6_k3f,r6_k3b
	v4: glyceraldehyde3_phosphate(glyceraldehyde3_phosphate)@CYTOPLASM + NAD(pl~0)@CYTOPLASM -> s1_2_bisphospho_D_glycerate()@CYTOPLASM + NADH()@CYTOPLASM fRate6()
	v5: s1_2_bisphospho_D_glycerate()@CYTOPLASM + adeninediphosphate()@CYTOPLASM <-> phosphoenolpyruvate()@CYTOPLASM + adeninetriphosphate()@CYTOPLASM r8_k5f,r8_k5b
	v6: phosphoenolpyruvate()@CYTOPLASM + adeninediphosphate()@CYTOPLASM -> pyruvate()@CYTOPLASM + adeninetriphosphate()@CYTOPLASM fRate8()
	v7: pyruvate()@CYTOPLASM + NADH()@CYTOPLASM <-> lactate()@CYTOPLASM + NAD(pl~0)@CYTOPLASM r10_k8f,r10_k8b
	hidden_1: adeninemonophosphate()@CYTOPLASM + adeninetriphosphate()@CYTOPLASM <-> adeninediphosphate()@CYTOPLASM + adeninediphosphate()@CYTOPLASM r11_k9f,r11_k9b
	v8: pyruvate()@CYTOPLASM -> pyruvate()@MATRIX fRate11()
	v9: pyruvate()@MATRIX + coenzymeA()@MATRIX + NAD(pl~PL)@MATRIX -> carbondioxide()@MATRIX + acetylCoA()@MATRIX + NADH()@MATRIX fRate12()
	v10: oxaloacetate()@MATRIX + acetylCoA()@MATRIX -> citrate()@MATRIX + coenzymeA()@MATRIX fRate13()
	v11: citrate()@MATRIX <-> isocitrate()@MATRIX fRate14(),fRate14m()
	v12_reactants_0: 0  -> isocitrate()@MATRIX -1*(fRate15()) #Modifiers(ADP)
	v12_reactants_1: 0  -> NAD(pl~PL)@MATRIX -1*(fRate15()) #Modifiers(ADP)
	v12_products_0: 0  -> oxoglutarate()@MATRIX fRate15() #Modifiers(ADP)
	v12_products_1: 0  -> NADH()@MATRIX fRate15() #Modifiers(ADP)
	v14: oxoglutarate()@MATRIX + coenzymeA()@MATRIX + NAD(pl~PL)@MATRIX -> carbondioxide()@MATRIX + succinyl_CoA()@MATRIX + NADH()@MATRIX fRate16()
	v15_reactants_0: 0  -> guanosinediphosphate()@MATRIX -1*(fRate17())
	v15_reactants_1: 0  -> succinyl_CoA()@MATRIX -1*(fRate17())
	v15_reactants_2: 0  -> phosphate()@MATRIX -1*(fRate17())
	v15_products_0: 0  -> succinate()@MATRIX fRate17()
	v15_products_1: 0  -> guanosinetriphosphate()@MATRIX fRate17()
	v15_products_2: 0  -> coenzymeA()@MATRIX fRate17()
	v16: succinate()@MATRIX + ubiquino(l~0,ne~NE)@MT_IMS <-> fumarate()@MATRIX + ubiquino(l~L,ne~0)@MT_IMS fRate18(),fRate18m()
	v17: fumarate()@MATRIX <-> malate()@MATRIX fRate19(),fRate19m()
	v18: malate()@MATRIX + NAD(pl~PL)@MATRIX <-> NADH()@MATRIX + oxaloacetate()@MATRIX fRate20(),fRate20m()
	v20: slanine()@MATRIX + oxoglutarate()@MATRIX <-> glutamate()@MATRIX + pyruvate()@MATRIX fRate21(),fRate21m()
	v21: oxaloacetate()@MATRIX + glutamate()@MATRIX <-> aspartate()@MATRIX + oxoglutarate()@MATRIX fRate22(),fRate22m()
	v22: glutamate()@CYTOPLASM + aspartate()@MATRIX <-> aspartate()@CYTOPLASM + glutamate()@MATRIX fRate23(),fRate23m()
	v24: NADH()@MATRIX + ubiquino(l~0,ne~NE)@MT_IMS <-> NAD(pl~PL)@MATRIX + ubiquino(l~L,ne~0)@MT_IMS fRate24(),fRate24m()
	v25_reactants_0: 0  -> ubiquino(l~L,ne~0)@MT_IMS -1*(fRate25())
	v25_reactants_1: 0  -> cytochromec(ferri~0,ferro~FERRO)@MT_IMS -1*2.0*(fRate25())
	v25_products_0: 0  -> ubiquino(l~0,ne~NE)@MT_IMS fRate25()
	v25_products_1: 0  -> cytochromec(ferri~FERRI,ferro~0)@MT_IMS 2.0*fRate25()
	v26: cytochromec(ferri~FERRI,ferro~0)@MT_IMS -> cytochromec(ferri~0,ferro~FERRO)@MT_IMS fRate26()
	v27_reactants_0: 0  -> citrate()@CYTOPLASM -1*(fRate27())
	v27_reactants_1: 0  -> coenzymeA()@CYTOPLASM -1*(fRate27())
	v27_products_0: 0  -> oxaloacetate()@CYTOPLASM fRate27()
	v27_products_1: 0  -> acetylCoA()@CYTOPLASM fRate27()
	v28_reactants_0: 0  -> adeninediphosphate()@MATRIX -1*(fRate28())
	v28_reactants_1: 0  -> phosphate()@MATRIX -1*(fRate28())
	v28_products_0: 0  -> adeninetriphosphate()@MATRIX fRate28()
	v28_products_1: 0  -> water()@MATRIX fRate28()
	v29: citrate()@CYTOPLASM <-> isocitrate()@CYTOPLASM fRate29(),fRate29m()
	v30: malate()@CYTOPLASM + oxoglutarate()@MATRIX <-> oxoglutarate()@CYTOPLASM + malate()@MATRIX fRate30(),fRate30m()
	v31: NADH()@CYTOPLASM + oxaloacetate()@CYTOPLASM <-> malate()@CYTOPLASM + NAD(pl~0)@CYTOPLASM fRate31(),fRate31m()
	v32: aspartate()@CYTOPLASM + oxoglutarate()@CYTOPLASM <-> oxaloacetate()@CYTOPLASM + glutamate()@CYTOPLASM fRate32(),fRate32m()
	v33: citrate()@CYTOPLASM + malate()@MATRIX <-> malate()@CYTOPLASM + citrate()@MATRIX fRate33(),fRate33m()
	v34: electrontransferflavoprotein__reducedform__()@MATRIX + ubiquino(l~0,ne~NE)@MT_IMS <-> electrontransferflavoprotein__oxidisedform__()@MATRIX + ubiquino(l~L,ne~0)@MT_IMS fRate34(),fRate34m()
	v35: FADH2()@MATRIX + electrontransferflavoprotein__oxidisedform__()@MATRIX <-> electrontransferflavoprotein__reducedform__()@MATRIX + FAD()@MATRIX fRate35(),fRate35m()
	v36_reactants_0: 0  -> adeninetriphosphate()@MATRIX -1*(fRate36())
	v36_reactants_1: 0  -> carbondioxide()@MATRIX -1*(fRate36())
	v36_reactants_2: 0  -> pyruvate()@MATRIX -1*(fRate36())
	v36_products_0: 0  -> phosphate()@MATRIX fRate36()
	v36_products_1: 0  -> adeninediphosphate()@MATRIX fRate36()
	v36_products_2: 0  -> oxaloacetate()@MATRIX fRate36()
	v37_reactants_0: 0  -> glycerol_3_phosphate()@CYTOPLASM -1*(fRate37())
	v37_reactants_1: 0  -> FAD()@MATRIX -1*(fRate37())
	v37_products_0: 0  -> FADH2()@MATRIX fRate37()
	v37_products_1: 0  -> dihydrohxyacetone_phosphate()@CYTOPLASM fRate37()
	v38_reactants_0: 0  -> NADH()@CYTOPLASM -1*(fRate38())
	v38_reactants_1: 0  -> dihydrohxyacetone_phosphate()@CYTOPLASM -1*(fRate38())
	v38_products_0: 0  -> glycerol_3_phosphate()@CYTOPLASM fRate38()
	v38_products_1: 0  -> NAD(pl~0)@CYTOPLASM fRate38()
	v40: adeninediphosphate()@CYTOPLASM -> adeninediphosphate()@MATRIX fRate39()
	v41: isocitrate()@CYTOPLASM + NADP(pl~0)@CYTOPLASM <-> oxoglutarate()@CYTOPLASM + NADPH()@CYTOPLASM fRate40(),fRate40m() #Modifiers(CO2)
	v42: isocitrate()@CYTOPLASM + malate()@MATRIX <-> malate()@CYTOPLASM + isocitrate()@MATRIX fRate41(),fRate41m()
	v43: adeninetriphosphate()@MATRIX -> adeninetriphosphate()@CYTOPLASM fRate42()
	v39: malate()@CYTOPLASM + NADP(pl~0)@CYTOPLASM -> NADPH()@CYTOPLASM + pyruvate()@CYTOPLASM fRate43()
	v44_reactants_0: 0  -> malate()@MATRIX -1*(fRate44())
	v44_reactants_1: 0  -> NADP(pl~PL)@MATRIX -1*(fRate44())
	v44_products_0: 0  -> NADPH()@MATRIX fRate44()
	v44_products_1: 0  -> pyruvate()@MATRIX fRate44()
end reaction rules
end model
