###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000265', 'http://identifiers.org/biomodels.db/MODEL1008240000']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/20015233']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/pubmed/15363676']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/40674']
#@BQB_HAS_VERSION:['http://identifiers.org/go/GO:0031575']
#@creatorEmail:'jls@sun.ac.za'
#@creatorName:'Snoep Jacky L'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 23 molecules and 52 reactions. The translated model has 14 molecules and 60 rules'
###
begin model
begin parameters
	Flag 1.0 #units:dimensionless
	r31switch 1.0 #units:dimensionless
	K10 5.0 #units:per_hour
	K8a 0.1 #units:per_hour
	K8 2.0 #units:per_hour
	K25 1000.0 #units:per_hour
	K25R 10.0 #units:per_hour
	J8 0.1 #units:dimensionless
	YE 1.0 #units:dimensionless
	YB 0.05 #units:dimensionless
	K30 20.0 #units:per_hour
	K2a 0.05 #units:per_hour
	K2 20.0 #units:per_hour
	K2aa 1.0 #units:per_hour
	K6a 10.0 #units:per_hour
	K6 100.0 #units:per_hour
	HE 0.5 #units:dimensionless
	HB 1.0 #units:dimensionless
	HA 0.5 #units:dimensionless
	RBT 10.0 #units:dimensionless
	LD 3.3 #units:dimensionless
	LE 5.0 #units:dimensionless
	LB 5.0 #units:dimensionless
	LA 3.0 #units:dimensionless
	K20 10.0 #units:per_hour
	K21 1.0 #units:dimensionless
	PP1T 1.0 #units:dimensionless
	FE 25.0 #units:dimensionless
	FB 2.0 #units:dimensionless
	K4 40.0 #units:per_hour
	GB 1.0 #units:dimensionless
	GA 0.3 #units:dimensionless
	K12 1.5 #units:per_hour
	E2FT 5.0 #units:dimensionless
	K22 1.0 #units:per_hour
	K23a 0.005 #units:per_hour
	K23 1.0 #units:per_hour
	K26 10000.0 #units:per_hour
	K26R 200.0 #units:per_hour
	eps 1.0 #units:dimensionless
	GE 0
	r1_k16 0.250000
	r2_k18 10.000000
	r7_k24 1000.000000
	r8_k24r 10.000000
	r20_J3 0.010000
	r20_K3 140.000000
	r20_K3a 7.500000
	r21_J4 0.010000
	r22_K34 0.050000
	r23_J31 0.010000
	r23_K31 0.700000
	r24_J32 0.010000
	r24_K32 1.800000
	r26_J13 0.005000
	r26_K13 5.000000
	r27_J14 0.005000
	r27_K14 2.500000
	r31_K27 0.200000
	r32_K28 0.200000
	r33_MU 0.061000
	r34_J15 0.100000
	r34_k15 0.250000
	r35_K11 1.500000
	r35_K11a 0.000000
	r36_K29 0.050000
	r37_K33 0.050000
	r38_K7 0.600000
	r38_K7a 0.000000
	r39_K9 2.500000
	r40_K5 20.000000
	r41_J17 0.300000
	r41_k17 10.000000
	r41_k17a 0.350000
	r42_J1 0.100000
	r42_K1 0.600000
	r42_K1a 0.100000
	r44_K19 20.000000
	r44_K19a 0.000000
end parameters
begin molecule types
	early_responsegenes()
	#^ bqbiol:hasPart uniprot:P24941, interpro:IPR015454
	cyclinB_Cdk2(cyclinA_Cdk2~cyclinA_Cdk2~0,cyclinD_Cdk2~cyclinD_Cdk2~0,cyclinE_Cdk2~cyclinE_Cdk2~0,p27)
	delayed_responsegenes()
	#^ bqbiol:is go:GO:0005680
	phosphorylatedintermediaryenzyme()
	#^ bqbiol:is uniprot:Q01094
	E2F(phosphorylatedE2F~phosphorylatedE2F~0,retinoblastomaprotein__rb__)
	#^ bqbiol:is go:GO:0016049
	mass()
	#^ bqbiol:is uniprot:P26309
	Cdc20()
	#^ bqbiol:is uniprot:P46527
	P27(cyclinb_cdk2)
	generalmachineryforproteinsynthesis()
	#^ bqbiol:is uniprot:P06400
	retinoblastomaprotein__Rb__(e2f)
	#^ bqbiol:is uniprot:P26309
	inactiveCdc20()
	#^ bqbiol:is uniprot:P06400
	hypophosphorylatedRb()
	#^ bqbiol:is uniprot:P12830
	Cdh1()
	#^ bqbiol:is uniprot:P38698
	PPX()
end molecule types
begin seed species
	Cdc20() 1.325905894e+21 # 0.00220177mol/L * 6.022e23/mol *1.0L #Cdc20 #CDc20
	Cdh1() 3.934040116e+20 #original 0.000653278arbitrary units/L #Cdh1 #CDh1
	cyclinB_Cdk2(cyclinA_Cdk2~cyclinA_Cdk2,cyclinD_Cdk2~0,cyclinE_Cdk2~0,p27) 8.4874068e+23 #original 1.4094arbitrary units/L #cyclinA_Cdk2 #CYCA
	cyclinB_Cdk2(cyclinA_Cdk2~0,cyclinD_Cdk2~0,cyclinE_Cdk2~0,p27) 1.643391756e+24 #original 2.72898arbitrary units/L #cyclinB_Cdk2 #CYCB
	cyclinB_Cdk2(cyclinA_Cdk2~0,cyclinD_Cdk2~cyclinD_Cdk2,cyclinE_Cdk2~0,p27) 2.64540438e+23 #original 0.43929arbitrary units/L #cyclinD_Cdk2 #CYCD
	cyclinB_Cdk2(cyclinA_Cdk2~0,cyclinD_Cdk2~0,cyclinE_Cdk2~cyclinE_Cdk2,p27) 1.379712464e+22 #original 0.0229112arbitrary units/L #cyclinE_Cdk2 #CYCE
	delayed_responsegenes() 5.4230097260000006e+23 #original 0.900533arbitrary units/L #delayed_responsegenes #DRG
	E2F(phosphorylatedE2F~0,retinoblastomaprotein__rb__) 5.961695692000001e+23 #original 0.989986arbitrary units/L #E2F #var2
	E2F(phosphorylatedE2F~0,retinoblastomaprotein__rb__!474).retinoblastomaprotein__Rb__(e2f!474) 2.8840020420000004e+21 #original 0.00478911arbitrary units/L #E2F_Rb #var5
	early_responsegenes() 7.33533798e+21 #original 0.0121809arbitrary units/L #early_responsegenes #ERG
	generalmachineryforproteinsynthesis() 8.1637243e+23 #original 1.35565arbitrary units/L #generalmachineryforproteinsynthesis #GM
	hypophosphorylatedRb() 6.007390628000001e+24 #original 9.97574arbitrary units/L #hypophosphorylatedRb #var1
	inactiveCdc20() 1.425606126e+24 #original 2.36733arbitrary units/L #inactiveCdc20 #CDc20T
	mass() 1.016369072e+24 #original 1.68776arbitrary units/L #mass #MASS
	P27(cyclinb_cdk2) 5.557137732e+21 #original 0.00922806arbitrary units/L #P27 #P27
	cyclinB_Cdk2(cyclinA_Cdk2~cyclinA_Cdk2,cyclinD_Cdk2~0,cyclinE_Cdk2~0,p27!475).P27(cyclinb_cdk2!475) 2.1494143940000003e+22 #original 0.0356927arbitrary units/L #P27_cyclinA_Cdk2 #CA
	cyclinB_Cdk2(cyclinA_Cdk2~0,cyclinD_Cdk2~cyclinD_Cdk2,cyclinE_Cdk2~0,p27!475).P27(cyclinb_cdk2!475) 6.6097472e+21 #original 0.010976arbitrary units/L #P27_cyclinD_Cdk2 #CD
	cyclinB_Cdk2(cyclinA_Cdk2~0,cyclinD_Cdk2~0,cyclinE_Cdk2~cyclinE_Cdk2,p27!475).P27(cyclinb_cdk2!475) 3.267458914e+20 #original 0.000542587arbitrary units/L #P27_cyclinE_Cdk2 #CE
	E2F(phosphorylatedE2F~phosphorylatedE2F,retinoblastomaprotein__rb__) 2.400333068e+24 #original 3.98594arbitrary units/L #phosphorylatedE2F #var3
	E2F(phosphorylatedE2F~phosphorylatedE2F,retinoblastomaprotein__rb__!474).retinoblastomaprotein__Rb__(e2f!474) 1.161174084e+22 #original 0.0192822arbitrary units/L #phosphorylatedE2F_Rb #var6
	phosphorylatedintermediaryenzyme() 9.3133241e+22 #original 0.154655arbitrary units/L #phosphorylatedintermediaryenzyme #IEP
	PPX() 6.022e+23 #original 1.0arbitrary units/L #PPX #PPX
	retinoblastomaprotein__Rb__(e2f) 1.1494251620000001e+20 #original 0.000190871arbitrary units/L #retinoblastomaprotein__Rb__ #var4
end seed species
begin observables
	Species Cdc20 Cdc20() #Cdc20
	Species Cdh1 Cdh1() #Cdh1
	Species cyclinA_Cdk2 cyclinB_Cdk2(cyclinA_Cdk2~cyclinA_Cdk2,cyclinD_Cdk2~0,cyclinE_Cdk2~0,p27) #cyclin A:Cdk2
	Species cyclinB_Cdk2 cyclinB_Cdk2(cyclinA_Cdk2~0,cyclinD_Cdk2~0,cyclinE_Cdk2~0,p27) #cyclin B:Cdk2
	Species cyclinD_Cdk2 cyclinB_Cdk2(cyclinA_Cdk2~0,cyclinD_Cdk2~cyclinD_Cdk2,cyclinE_Cdk2~0,p27) #cyclin D:Cdk2
	Species cyclinE_Cdk2 cyclinB_Cdk2(cyclinA_Cdk2~0,cyclinD_Cdk2~0,cyclinE_Cdk2~cyclinE_Cdk2,p27) #cyclin E:Cdk2
	Species delayed_responsegenes delayed_responsegenes() #delayed-response genes
	Species E2F E2F(phosphorylatedE2F~0,retinoblastomaprotein__rb__) #E2F
	Species E2F_Rb E2F(phosphorylatedE2F~0,retinoblastomaprotein__rb__!474).retinoblastomaprotein__Rb__(e2f!474) #E2F:Rb
	Species early_responsegenes early_responsegenes() #early-response genes
	Species generalmachineryforproteinsynthesis generalmachineryforproteinsynthesis() #general machinery for protein synthesis
	Species hypophosphorylatedRb hypophosphorylatedRb() #hypophosphorylated Rb
	Species inactiveCdc20 inactiveCdc20() #inactive Cdc20
	Species mass mass() #mass
	Species P27 P27(cyclinb_cdk2) #P27
	Species P27_cyclinA_Cdk2 cyclinB_Cdk2(cyclinA_Cdk2~cyclinA_Cdk2,cyclinD_Cdk2~0,cyclinE_Cdk2~0,p27!475).P27(cyclinb_cdk2!475) #P27:cyclin A:Cdk2
	Species P27_cyclinD_Cdk2 cyclinB_Cdk2(cyclinA_Cdk2~0,cyclinD_Cdk2~cyclinD_Cdk2,cyclinE_Cdk2~0,p27!475).P27(cyclinb_cdk2!475) #P27:cyclin D:Cdk2
	Species P27_cyclinE_Cdk2 cyclinB_Cdk2(cyclinA_Cdk2~0,cyclinD_Cdk2~0,cyclinE_Cdk2~cyclinE_Cdk2,p27!475).P27(cyclinb_cdk2!475) #P27:cyclin E:Cdk2
	Species phosphorylatedE2F E2F(phosphorylatedE2F~phosphorylatedE2F,retinoblastomaprotein__rb__) #phosphorylated E2F
	Species phosphorylatedE2F_Rb E2F(phosphorylatedE2F~phosphorylatedE2F,retinoblastomaprotein__rb__!474).retinoblastomaprotein__Rb__(e2f!474) #phosphorylated E2F:Rb
	Species phosphorylatedintermediaryenzyme phosphorylatedintermediaryenzyme() #phosphorylated intermediary enzyme
	Species PPX PPX() #PPX
	Species retinoblastomaprotein__Rb__ retinoblastomaprotein__Rb__(e2f) #retinoblastoma protein (Rb)
end observables
begin functions
	CYCET() = P27_cyclinE_Cdk2 + cyclinE_Cdk2
	V8() = K8*(YB*cyclinB_Cdk2 + YE*(cyclinA_Cdk2 + cyclinE_Cdk2))/(CYCET + J8) + K8a
	P27T() = P27 + P27_cyclinA_Cdk2 + P27_cyclinD_Cdk2 + P27_cyclinE_Cdk2
	CYCAT() = P27_cyclinA_Cdk2 + cyclinA_Cdk2
	CYCDT() = P27_cyclinD_Cdk2 + cyclinD_Cdk2
	V6() = K6*(HA*cyclinA_Cdk2 + HB*cyclinB_Cdk2 + HE*cyclinE_Cdk2) + K6a
	V4() = K4*(GA*cyclinA_Cdk2 + GB*cyclinB_Cdk2 + GE*cyclinE_Cdk2)
	V2() = Cdc20*K2aa + Cdh1*K2 + K2a*(1 - Cdh1)
	PP1A() = PP1T/(K21*(FB*cyclinB_Cdk2 + FE*(cyclinA_Cdk2 + cyclinE_Cdk2)) + 1)
	fRate8() = Cdc20*K30
	fRate9() = Cdc20*K30
	fRate19() = (1 - Cdh1)*(140.0*Cdc20 + 7.5)/(1.01 - Cdh1)
	fRate20() = V4/(Cdh1 + 0.01)
	fRate22() = 0.7*cyclinB_Cdk2/(1.01 - phosphorylatedintermediaryenzyme)
	fRate22m() = 0.7*cyclinB_Cdk2/(1.01 - phosphorylatedintermediaryenzyme)
	fRate23() = 1.8*PPX/(phosphorylatedintermediaryenzyme + 0.01)
	fRate25() = 5.0*inactiveCdc20*phosphorylatedintermediaryenzyme/(-Cdc20 + inactiveCdc20 + 0.005)
	fRate25m() = 5.0*phosphorylatedintermediaryenzyme/(-Cdc20 + inactiveCdc20 + 0.005)
	fRate26() = 2.5/(Cdc20 + 0.005)
	fRate28() = E2F_Rb*K20*(LA*cyclinA_Cdk2 + LB*cyclinB_Cdk2 + LD*(P27_cyclinD_Cdk2 + cyclinD_Cdk2) + LE*cyclinE_Cdk2)
	fRate29() = K20*phosphorylatedE2F_Rb*(LA*cyclinA_Cdk2 + LB*cyclinB_Cdk2 + LD*(P27_cyclinD_Cdk2 + cyclinD_Cdk2) + LE*cyclinE_Cdk2)
	fRate30() = 0.2*mass*r31switch
	fRate32() = 0.061*eps*generalmachineryforproteinsynthesis
	fRate33() = 0.0025*eps/(delayed_responsegenes^2 + 0.01)
	fRate34() = 1.5*cyclinB_Cdk2*eps
	fRate35() = 0.05*E2F*eps*mass
	fRate36() = 0.05*eps
	fRate37() = 0.6*E2F*eps
	fRate38() = 2.5*delayed_responsegenes*eps
	fRate39() = 20.0*eps
	fRate40() = eps*(10.0*delayed_responsegenes^2 + 0.35*early_responsegenes*(delayed_responsegenes^2 + 0.09))/(delayed_responsegenes^2 + 0.09)
	fRate41() = eps*(0.7*cyclinB_Cdk2^2 + 0.001)/(cyclinB_Cdk2^2 + 0.01)
	fRate42() = K20*retinoblastomaprotein__Rb__*(LA*cyclinA_Cdk2 + LB*cyclinB_Cdk2 + LD*(P27_cyclinD_Cdk2 + cyclinD_Cdk2) + LE*cyclinE_Cdk2)
	fRate43() = 20.0*PP1A*hypophosphorylatedRb
	fRate45() = E2F*(K23*(cyclinA_Cdk2 + cyclinB_Cdk2) + K23a)
	fRate51() = E2F_Rb*(K23*(cyclinA_Cdk2 + cyclinB_Cdk2) + K23a)
end functions
begin reaction rules
	v1: early_responsegenes() -> 0  r1_k16
	v2: delayed_responsegenes() -> 0  r2_k18
	v3: cyclinB_Cdk2(cyclinA_Cdk2~0,cyclinD_Cdk2~cyclinD_Cdk2,cyclinE_Cdk2~0,p27!475).P27(cyclinb_cdk2!475) -> P27(cyclinb_cdk2) K10
	v4: cyclinB_Cdk2(cyclinA_Cdk2~0,cyclinD_Cdk2~cyclinD_Cdk2,cyclinE_Cdk2~0,p27) -> 0  K10
	v5: cyclinB_Cdk2(cyclinA_Cdk2~0,cyclinD_Cdk2~0,cyclinE_Cdk2~cyclinE_Cdk2,p27) + P27(cyclinb_cdk2) -> cyclinB_Cdk2(cyclinA_Cdk2~0,cyclinD_Cdk2~0,cyclinE_Cdk2~cyclinE_Cdk2,p27!475).P27(cyclinb_cdk2!475) K25
	v6: cyclinB_Cdk2(cyclinA_Cdk2~cyclinA_Cdk2,cyclinD_Cdk2~0,cyclinE_Cdk2~0,p27) + P27(cyclinb_cdk2) -> cyclinB_Cdk2(cyclinA_Cdk2~cyclinA_Cdk2,cyclinD_Cdk2~0,cyclinE_Cdk2~0,p27!475).P27(cyclinb_cdk2!475) K25
	v7: cyclinB_Cdk2(cyclinA_Cdk2~0,cyclinD_Cdk2~cyclinD_Cdk2,cyclinE_Cdk2~0,p27) + P27(cyclinb_cdk2) -> cyclinB_Cdk2(cyclinA_Cdk2~0,cyclinD_Cdk2~cyclinD_Cdk2,cyclinE_Cdk2~0,p27!475).P27(cyclinb_cdk2!475) r7_k24
	v8: cyclinB_Cdk2(cyclinA_Cdk2~0,cyclinD_Cdk2~cyclinD_Cdk2,cyclinE_Cdk2~0,p27!475).P27(cyclinb_cdk2!475) -> cyclinB_Cdk2(cyclinA_Cdk2~0,cyclinD_Cdk2~cyclinD_Cdk2,cyclinE_Cdk2~0,p27) + P27(cyclinb_cdk2) r8_k24r
	v9: cyclinB_Cdk2(cyclinA_Cdk2~cyclinA_Cdk2,cyclinD_Cdk2~0,cyclinE_Cdk2~0,p27) -> 0  fRate8() #Modifiers(CDc20)
	v10: cyclinB_Cdk2(cyclinA_Cdk2~cyclinA_Cdk2,cyclinD_Cdk2~0,cyclinE_Cdk2~0,p27!475).P27(cyclinb_cdk2!475) -> P27(cyclinb_cdk2) fRate9() #Modifiers(CDc20)
	v11: cyclinB_Cdk2(cyclinA_Cdk2~0,cyclinD_Cdk2~0,cyclinE_Cdk2~cyclinE_Cdk2,p27!475).P27(cyclinb_cdk2!475) -> cyclinB_Cdk2(cyclinA_Cdk2~0,cyclinD_Cdk2~0,cyclinE_Cdk2~cyclinE_Cdk2,p27) + P27(cyclinb_cdk2) K25R
	v12: cyclinB_Cdk2(cyclinA_Cdk2~cyclinA_Cdk2,cyclinD_Cdk2~0,cyclinE_Cdk2~0,p27!475).P27(cyclinb_cdk2!475) -> cyclinB_Cdk2(cyclinA_Cdk2~cyclinA_Cdk2,cyclinD_Cdk2~0,cyclinE_Cdk2~0,p27) + P27(cyclinb_cdk2) K25R
	v13: cyclinB_Cdk2(cyclinA_Cdk2~0,cyclinD_Cdk2~0,cyclinE_Cdk2~cyclinE_Cdk2,p27!475).P27(cyclinb_cdk2!475) -> P27(cyclinb_cdk2) V8 #Modifiers(CYCB, CYCA, CYCE)
	v14: cyclinB_Cdk2(cyclinA_Cdk2~0,cyclinD_Cdk2~0,cyclinE_Cdk2~cyclinE_Cdk2,p27) -> 0  V8 #Modifiers(CYCB, CYCA, CE)
	v15: P27(cyclinb_cdk2) -> 0  V6 #Modifiers(CYCA, CYCB, CYCE)
	v16: cyclinB_Cdk2(cyclinA_Cdk2~0,cyclinD_Cdk2~0,cyclinE_Cdk2~cyclinE_Cdk2,p27!475).P27(cyclinb_cdk2!475) -> cyclinB_Cdk2(cyclinA_Cdk2~0,cyclinD_Cdk2~0,cyclinE_Cdk2~cyclinE_Cdk2,p27) V6 #Modifiers(CYCA, CYCB)
	v17: cyclinB_Cdk2(cyclinA_Cdk2~0,cyclinD_Cdk2~cyclinD_Cdk2,cyclinE_Cdk2~0,p27!475).P27(cyclinb_cdk2!475) -> cyclinB_Cdk2(cyclinA_Cdk2~0,cyclinD_Cdk2~cyclinD_Cdk2,cyclinE_Cdk2~0,p27) V6 #Modifiers(CYCA, CYCB, CYCE)
	v18: cyclinB_Cdk2(cyclinA_Cdk2~cyclinA_Cdk2,cyclinD_Cdk2~0,cyclinE_Cdk2~0,p27!475).P27(cyclinb_cdk2!475) -> cyclinB_Cdk2(cyclinA_Cdk2~cyclinA_Cdk2,cyclinD_Cdk2~0,cyclinE_Cdk2~0,p27) V6 #Modifiers(CYCB, CYCE)
	v19: cyclinB_Cdk2(cyclinA_Cdk2~0,cyclinD_Cdk2~0,cyclinE_Cdk2~0,p27) -> 0  V2 #Modifiers(CDc20, CDh1)
	v20_products_0: 0  -> Cdh1() fRate19() #Modifiers(CDc20)
	v21: Cdh1() -> 0  fRate20() #Modifiers(CYCA, CYCB, CYCE)
	v22: PPX() -> 0  r22_K34
	v23: 0  <-> phosphorylatedintermediaryenzyme() fRate22(),fRate22m() #Modifiers(CYCB)
	v24: phosphorylatedintermediaryenzyme() -> 0  fRate23() #Modifiers(PPX)
	v25: inactiveCdc20() -> 0  K12
	v26: 0  <-> Cdc20() fRate25(),fRate25m() #Modifiers(CDc20T, IEP)
	v27: Cdc20() -> 0  fRate26()
	v28: Cdc20() -> 0  K12
	v29_reactants_0: 0  -> E2F(phosphorylatedE2F~0,retinoblastomaprotein__rb__!474).retinoblastomaprotein__Rb__(e2f!474) -1*(fRate28()) #Modifiers(CYCA, CYCB, CD, CYCD, CYCE)
	v29_products_0: 0  -> hypophosphorylatedRb() fRate28() #Modifiers(CYCA, CYCB, CD, CYCD, CYCE)
	v29_products_1: 0  -> E2F(phosphorylatedE2F~0,retinoblastomaprotein__rb__) fRate28() #Modifiers(CYCA, CYCB, CD, CYCD, CYCE)
	v30_reactants_0: 0  -> E2F(phosphorylatedE2F~phosphorylatedE2F,retinoblastomaprotein__rb__!474).retinoblastomaprotein__Rb__(e2f!474) -1*(fRate29()) #Modifiers(CYCA, CYCB, CD, CYCD, CYCE)
	v30_products_0: 0  -> hypophosphorylatedRb() fRate29() #Modifiers(CYCA, CYCB, CD, CYCD, CYCE)
	v30_products_1: 0  -> E2F(phosphorylatedE2F~phosphorylatedE2F,retinoblastomaprotein__rb__) fRate29() #Modifiers(CYCA, CYCB, CD, CYCD, CYCE)
	v31: 0  -> generalmachineryforproteinsynthesis() fRate30() #Modifiers(MASS)
	v32: generalmachineryforproteinsynthesis() -> 0  r32_K28
	v33: 0  -> mass() fRate32() #Modifiers(GM)
	v34: 0  -> early_responsegenes() fRate33() #Modifiers(DRG)
	v35: 0  -> inactiveCdc20() fRate34() #Modifiers(CYCB)
	v36: 0  -> cyclinB_Cdk2(cyclinA_Cdk2~cyclinA_Cdk2,cyclinD_Cdk2~0,cyclinE_Cdk2~0,p27) fRate35() #Modifiers(MASS, var2)
	v37: 0  -> PPX() fRate36()
	v38: 0  -> cyclinB_Cdk2(cyclinA_Cdk2~0,cyclinD_Cdk2~0,cyclinE_Cdk2~cyclinE_Cdk2,p27) fRate37() #Modifiers(var2)
	v39: 0  -> cyclinB_Cdk2(cyclinA_Cdk2~0,cyclinD_Cdk2~cyclinD_Cdk2,cyclinE_Cdk2~0,p27) fRate38() #Modifiers(DRG)
	v40: 0  -> P27(cyclinb_cdk2) fRate39()
	v41: 0  -> delayed_responsegenes() fRate40() #Modifiers(ERG)
	v42: 0  -> cyclinB_Cdk2(cyclinA_Cdk2~0,cyclinD_Cdk2~0,cyclinE_Cdk2~0,p27) fRate41()
	v43_reactants_0: 0  -> retinoblastomaprotein__Rb__(e2f) -1*(fRate42()) #Modifiers(CYCA, CYCB, CD, CYCD, CYCE)
	v43_products_0: 0  -> hypophosphorylatedRb() fRate42() #Modifiers(CYCA, CYCB, CD, CYCD, CYCE)
	v44_reactants_0: 0  -> hypophosphorylatedRb() -1*(fRate43()) #Modifiers(CYCB, CYCA, CYCE)
	v44_products_0: 0  -> retinoblastomaprotein__Rb__(e2f) fRate43() #Modifiers(CYCB, CYCA, CYCE)
	v45: E2F(phosphorylatedE2F~0,retinoblastomaprotein__rb__!474).retinoblastomaprotein__Rb__(e2f!474) -> E2F(phosphorylatedE2F~0,retinoblastomaprotein__rb__) + retinoblastomaprotein__Rb__(e2f) K26R
	v46_reactants_0: 0  -> E2F(phosphorylatedE2F~0,retinoblastomaprotein__rb__) -1*(fRate45()) #Modifiers(CYCA, CYCB)
	v46_products_0: 0  -> E2F(phosphorylatedE2F~phosphorylatedE2F,retinoblastomaprotein__rb__) fRate45() #Modifiers(CYCA, CYCB)
	v47: E2F(phosphorylatedE2F~phosphorylatedE2F,retinoblastomaprotein__rb__) -> E2F(phosphorylatedE2F~0,retinoblastomaprotein__rb__) K22
	v48: E2F(phosphorylatedE2F~0,retinoblastomaprotein__rb__) + retinoblastomaprotein__Rb__(e2f) -> E2F(phosphorylatedE2F~0,retinoblastomaprotein__rb__!474).retinoblastomaprotein__Rb__(e2f!474) K26
	v49: E2F(phosphorylatedE2F~phosphorylatedE2F,retinoblastomaprotein__rb__!474).retinoblastomaprotein__Rb__(e2f!474) -> E2F(phosphorylatedE2F~phosphorylatedE2F,retinoblastomaprotein__rb__) + retinoblastomaprotein__Rb__(e2f) K26R
	v50: E2F(phosphorylatedE2F~phosphorylatedE2F,retinoblastomaprotein__rb__) + retinoblastomaprotein__Rb__(e2f) -> E2F(phosphorylatedE2F~phosphorylatedE2F,retinoblastomaprotein__rb__!474).retinoblastomaprotein__Rb__(e2f!474) K26
	v51: E2F(phosphorylatedE2F~phosphorylatedE2F,retinoblastomaprotein__rb__!474).retinoblastomaprotein__Rb__(e2f!474) -> E2F(phosphorylatedE2F~0,retinoblastomaprotein__rb__!474).retinoblastomaprotein__Rb__(e2f!474) K22
	v52_reactants_0: 0  -> E2F(phosphorylatedE2F~0,retinoblastomaprotein__rb__!474).retinoblastomaprotein__Rb__(e2f!474) -1*(fRate51()) #Modifiers(CYCA, CYCB)
	v52_products_0: 0  -> E2F(phosphorylatedE2F~phosphorylatedE2F,retinoblastomaprotein__rb__!474).retinoblastomaprotein__Rb__(e2f!474) fRate51() #Modifiers(CYCA, CYCB)
end reaction rules
end model
