###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1005260000', 'http://identifiers.org/biomodels.db/BIOMD0000000271']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/20488988']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/39107', 'http://identifiers.org/obo.bto/BTO:0001035']
#@BQB_IS_VERSION_OF:['http://identifiers.org/obo.go/GO:0004900']
#@BQB_IS_PART_OF:['http://identifiers.org/kegg.pathway/ko04640', 'http://identifiers.org/kegg.pathway/ko04630']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 6 molecules and 8 reactions. The translated model has 5 molecules and 8 rules'
###
begin model
begin parameters
	kt 0.0329366 #units:per_minute
	Bmax 516.0 #units:pM
	kon 0.00010496 #units:per_minute_per_pM
	koff 0.0172135 #units:per_minute
	ke 0.0748267 #units:per_minute
	kex 0.00993805 #units:per_minute
	kdi 0.00317871 #units:per_minute
	kde 0.0164042 #units:per_minute
end parameters
begin compartments
	#volume units: L
	medium 3 1.0
	cellsurface 3 1.0
	cell 3 1.0
end compartments
begin molecule types
	#^ bqbiol:isEncodedBy ensembl:ENSMUSG00000029711
	#^ bqbiol:isVersionOf uniprot:P07321, kegg.orthology:K05437
	Epo(epor)
	dEpoi()
	Epo_EpoRi()
	dEpoe()
	#^ bqbiol:isEncodedBy ensembl:ENSMUSG00000006235
	#^ bqbiol:isVersionOf uniprot:P14753, kegg.orthology:K05079
	EpoR(epo)
end molecule types
begin seed species
	@cellsurface:EpoR(epo)@cellsurface 310735200000000.0 # (516.0 * 1e-12)mol/L * 6.022e23/mol *1.0L #EpoR #EpoR
	@medium:Epo(epor)@medium 1222580418000000.0 #original 2030.19picomole/L #Epo #Epo
end seed species
begin observables
	Species EpoR_cellsurface @cellsurface:EpoR(epo)@cellsurface #EpoR
	Species Epo_medium @medium:Epo(epor)@medium #Epo
	Species Epo_EpoR_cellsurface @cellsurface:EpoR(epo!480)@cellsurface.Epo(epor!480)@cellsurface #Epo_EpoR
	Species Epo_EpoRi_cell @cell:Epo_EpoRi() #Epo_EpoRi
	Species dEpoi_cell @cell:dEpoi()@cell #dEpoi
	Species dEpoe_medium @medium:dEpoe()@medium #dEpoe
end observables
begin functions
	Epo_cells() = Epo_EpoRi_cell + dEpoi_cell
	Epo_medium_ar() = Epo_medium + dEpoe_medium
	fRate0() = Bmax*kt
end functions
begin reaction rules
	reaction_1: 0  -> EpoR(epo)@cellsurface fRate0()
	reaction_2: EpoR(epo)@cellsurface -> 0  kt
	reaction_3: Epo(epor)@medium + EpoR(epo)@cellsurface -> EpoR(epo!480)@cellsurface.Epo(epor!480)@cellsurface kon
	reaction_4: EpoR(epo!480)@cellsurface.Epo(epor!480)@cellsurface -> Epo(epor)@medium + EpoR(epo)@cellsurface koff
	reaction_5: EpoR(epo!480)@cellsurface.Epo(epor!480)@cellsurface -> Epo_EpoRi()@cell ke
	reaction_6: Epo_EpoRi()@cell -> Epo(epor)@medium + EpoR(epo)@cellsurface kex
	reaction_7: Epo_EpoRi()@cell -> dEpoi()@cell kdi
	reaction_8: Epo_EpoRi()@cell -> dEpoe()@medium kde
end reaction rules
end model
