###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL7909987998', 'http://identifiers.org/biomodels.db/BIOMD0000000274']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/12753937']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0001503', 'http://identifiers.org/go/GO:0045453']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/7711']
#@creatorEmail:'c.lloyd@auckland.ac.nz'
#@creatorName:'Lloyd Catherine'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 3 molecules and 0 reactions. The translated model has 3 molecules and 3 rules'
###
begin model
begin parameters
	epsilon 0.1
	delta 0.9
	a1 0.05
	a2 0.009
	a3 0.675
	a4 0.01
	a5 0.005
	b1 0.1
	b2 0.3
	b3 0.01
	k1 0.1
	k2 0.5
	k3 0.025
end parameters
begin molecule types
	PTH()
	activeosteoclasts()
	activeosteoblasts()
end molecule types
begin seed species
	PTH() 1.2044e+24 # 2.0mol/L * 6.022e23/mol *1.0L #PTH #x
	activeosteoclasts() 6.022e+23 #original 1.0mol/L  #activeosteoclasts #y
	activeosteoblasts() 9.033e+22 #original 0.15mol/L  #activeosteoblasts #z
end seed species
begin observables
	Species PTH PTH() #PTH
	Species activeosteoclasts activeosteoclasts() #active osteoclasts
	Species activeosteoblasts activeosteoblasts() #active osteoblasts
end observables
begin functions
	arRatez() = delta*epsilon*(PTH*a4 - PTH*a5*activeosteoblasts/(PTH + k3) - activeosteoblasts*b3)
	arRatey() = epsilon*(activeosteoblasts*activeosteoclasts*(PTH*a3 + a2)/(PTH^2 + k2) - activeosteoclasts*b2)
	arRatex() = -PTH*b1 + a1/(activeosteoclasts + k1)
end functions
begin reaction rules
	0  -> PTH() arRatex #rateLaw
	0  -> activeosteoclasts() arRatey #rateLaw
	0  -> activeosteoblasts() arRatez #rateLaw
end reaction rules
end model
