###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1010190002', 'http://identifiers.org/biomodels.db/BIOMD0000000281']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/13692276']
#@BQB_HAS_TAXON:['http://identifiers.org/obo.bto/BTO:0000094', 'http://identifiers.org/taxonomy/9606']
#@BQB_HAS_VERSION:['http://identifiers.org/reactome/REACT_1383.6', 'http://identifiers.org/kegg.pathway/hsa00010']
#@BQB_IS_VERSION_OF:['http://identifiers.org/obo.go/GO:0006096', 'http://identifiers.org/obo.go/GO:0006119']
#@creatorEmail:'lukas@ebi.ac.uk'
#@creatorName:'Endler Lukas'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 32 molecules and 22 reactions. The translated model has 24 molecules and 28 rules'
###
begin model
begin parameters
	r1_k 3000000000.000000
	r2_k 10000000000.000000
	r3_k 40000000000.000000
	r4_k 40000000000.000000
	r5_k 100000.000000
	r6_k 2000000000.000000
	r7_k 80000000.000000
	r8_k 600000000000.000000
	r9_k 400000000.000000
	r10_k 6000000000.000000
	r11_k 10000000000.000000
	r12_k 5000000000.000000
	r13_k 500000000.000000
	r14_k 10000000.000000
	r15_k 20000000.000000
	r16_k 7500000000000.000000
	r17_k 400000000.000000
	r18_k 15000000000.000000
	r19_k 120000000.000000
	r20_k 4000000.000000
	r21_k 3000000000.000000
	r22_k 2000000.000000
end parameters
begin molecule types
	#^ bqbiol:is obo.chebi:CHEBI:16908, kegg.compound:C00004
	__DPH__extramitochondrialreduceddiphospyridinenucleotide()
	#^ bqbiol:is obo.chebi:CHEBI:16908, kegg.compound:C00004
	__DIH__intramitochondrialreduceddiphospyridinenucleotide()
	#^ bqbiol:is kegg.compound:C00007, obo.chebi:CHEBI:15379
	__OXY__oxygen()
	#^ bqbiol:is obo.chebi:CHEBI:16761, kegg.compound:C00008
	__ADP__adenosinediphosphate()
	#^ bqbiol:is obo.chebi:CHEBI:15422, kegg.compound:C00002
	__TP1__adenosinetriphosphateinstore1__cytoplasm__(__TP2__adenosinetriphosphateinstore2__mitochondria__~__TP2__adenosinetriphosphateinstore2__mitochondria__~0)
	#^ bqbiol:isVersionOf interpro:IPR001312
	#^ bqbiol:hasProperty obo.go:GO:0004396
	__ENZ__hexokinase(__glu__glucose)
	#^ bqbiol:is kegg.compound:C00111, obo.chebi:CHEBI:16108
	__DHA__dihydroxacetonephosphate(__gap__glyceraldehyde3_phosphate)
	#^ bqbiol:is kegg.compound:C00197, obo.chebi:CHEBI:17794
	__PGA__3phosphoglycerate()
	#^ bqbiol:hasPart obo.chebi:CHEBI:15422, obo.chebi:CHEBI:16541
	#^ bqbiol:hasProperty obo.go:GO:0016887
	__PPP__enzymeintermediateconcernedinATPutilization()
	#^ bqbiol:is obo.chebi:CHEBI:15846, kegg.compound:C00003
	__DPN__extramitochondrialdiphospyridinenucleotide(__mox__glyceraldehyde3_phoshphatedehydrogenase)
	#^ bqbiol:is obo.chebi:CHEBI:4170, kegg.compound:C00092
	__GLP__glucose6_phosphate(__etz__phosphofructokinase)
	#^ bqbiol:isVersionOf interpro:IPR022463
	#^ bqbiol:hasProperty obo.go:GO:0008662
	__ETZ__phosphofructokinase(__glp__glucose6_phosphate)
	#^ bqbiol:is kegg.compound:C00186, obo.chebi:CHEBI:422
	__LAC__lactate()
	#^ bqbiol:hasPart obo.chebi:CHEBI:29052
	#^ bqbiol:hasVersion interpro:IPR006424
	#^ bqbiol:hasProperty obo.go:GO:0004365
	__MOB__acylenzymeintermediateofglyceraldehyde3_phoshphatedehydrogenase()
	#^ bqbiol:is obo.chebi:CHEBI:29052, kegg.compound:C00118
	__GAP__glyceraldehyde3_phosphate(__dha__dihydroxacetonephosphate)
	#^ bqbiol:is kegg.compound:C00623, obo.chebi:CHEBI:16221
	__AGP__alpha_glycerophosphate()
	#^ bqbiol:isPartOf obo.go:GO:0045259, obo.go:GO:0005746
	__XI__lowenergyintermediateinoxidativephosphorylation(__XSI__highenergyintermediateinoxidativephosphorylation~__XSI__highenergyintermediateinoxidativephosphorylation~0,__pid__inorganicphosphate)
	#^ bqbiol:is kegg.compound:C00022, obo.chebi:CHEBI:32816
	__PYR__pyruvate()
	#^ bqbiol:is kegg.compound:C00003, obo.chebi:CHEBI:15846
	__DIN__intramitochondrialdiphospyridinenucleotide()
	#^ bqbiol:is obo.chebi:CHEBI:18367, kegg.compound:C00009
	__PID__inorganicphosphate(__xi__lowenergyintermediateinoxidativephosphorylation)
	#^ bqbiol:isVersionOf kegg.compound:C00017, obo.chebi:CHEBI:16541
	__PUE__enzymeconcernedinATPutilization()
	#^ bqbiol:is kegg.compound:C00293, obo.chebi:CHEBI:17234
	__GLU__glucose(__enz__hexokinase)
	#^ bqbiol:is kegg.compound:C00236, obo.chebi:CHEBI:16001
	__DGA__1_3diphosphoglycerate()
	#^ bqbiol:isVersionOf uniprot:P04406, uniprot:Q2TSD0, interpro:IPR006424
	#^ bqbiol:hasProperty obo.go:GO:0004365
	__MOX__glyceraldehyde3_phoshphatedehydrogenase(__dpn__extramitochondrialdiphospyridinenucleotide)
end molecule types
begin seed species
	__ENZ__hexokinase(__glu__glucose) 6.022000000000001e+18 # 1e-05mol/L * 6.022e23/mol *1.0L #__ENZ__hexokinase #ENZ
	__TP1__adenosinetriphosphateinstore1__cytoplasm__(__TP2__adenosinetriphosphateinstore2__mitochondria__~0) 3.011e+20 #original 0.0005mol/L #__TP1__adenosinetriphosphateinstore1__cytoplasm__ #TP1
	__ADP__adenosinediphosphate() 6.022000000000001e+19 #original 0.0001mol/L #__ADP__adenosinediphosphate #ADP
	__ETZ__phosphofructokinase(__glp__glucose6_phosphate) 6.022000000000001e+18 #original 1e-05mol/L #__ETZ__phosphofructokinase #ETZ
	__DPN__extramitochondrialdiphospyridinenucleotide(__mox__glyceraldehyde3_phoshphatedehydrogenase) 6.022000000000001e+19 #original 0.0001mol/L #__DPN__extramitochondrialdiphospyridinenucleotide #DPN
	__DPH__extramitochondrialreduceddiphospyridinenucleotide() 6.022000000000001e+19 #original 0.0001mol/L #__DPH__extramitochondrialreduceddiphospyridinenucleotide #DPH
	__PID__inorganicphosphate(__xi__lowenergyintermediateinoxidativephosphorylation) 2.4088e+21 #original 0.004mol/L #__PID__inorganicphosphate #PID
	__PYR__pyruvate() 6.022e+20 #original 0.001mol/L #__PYR__pyruvate #PYR
	__LAC__lactate() 6.022e+20 #original 0.001mol/L #__LAC__lactate #LAC
	__DIN__intramitochondrialdiphospyridinenucleotide() 1.8066000000000002e+19 #original 3e-05mol/L #__DIN__intramitochondrialdiphospyridinenucleotide #DIN
	__DIH__intramitochondrialreduceddiphospyridinenucleotide() 1.8066000000000002e+19 #original 3e-05mol/L #__DIH__intramitochondrialreduceddiphospyridinenucleotide #DIH
	__XI__lowenergyintermediateinoxidativephosphorylation(__XSI__highenergyintermediateinoxidativephosphorylation~0,__pid__inorganicphosphate) 1.2044000000000002e+19 #original 2e-05mol/L #__XI__lowenergyintermediateinoxidativephosphorylation #XI
	__XI__lowenergyintermediateinoxidativephosphorylation(__XSI__highenergyintermediateinoxidativephosphorylation~__XSI__highenergyintermediateinoxidativephosphorylation,__pid__inorganicphosphate) 1.2044000000000002e+19 #original 2e-05mol/L #__XSI__highenergyintermediateinoxidativephosphorylation #XSI
	__OXY__oxygen() 3.011e+20 #original 0.0005mol/L #__OXY__oxygen #OXY
	__XI__lowenergyintermediateinoxidativephosphorylation(__XSI__highenergyintermediateinoxidativephosphorylation~__XSI__highenergyintermediateinoxidativephosphorylation,__pid__inorganicphosphate!487).__PID__inorganicphosphate(__xi__lowenergyintermediateinoxidativephosphorylation!487) 1.2044000000000002e+19 #original 2e-05mol/L #__XSP__phosphorylatedintermediateinoxidativephosphorylation #XSP
	__TP1__adenosinetriphosphateinstore1__cytoplasm__(__TP2__adenosinetriphosphateinstore2__mitochondria__~__TP2__adenosinetriphosphateinstore2__mitochondria__) 3.011e+20 #original 0.0005mol/L #__TP2__adenosinetriphosphateinstore2__mitochondria__ #TP2
	__PUE__enzymeconcernedinATPutilization() 1.2044e+18 #original 2e-06mol/L #__PUE__enzymeconcernedinATPutilization #PUE
	__PPP__enzymeintermediateconcernedinATPutilization() 6.022e+17 #original 1e-06mol/L #__PPP__enzymeintermediateconcernedinATPutilization #PPP
	__MOX__glyceraldehyde3_phoshphatedehydrogenase(__dpn__extramitochondrialdiphospyridinenucleotide!486).__DPN__extramitochondrialdiphospyridinenucleotide(__mox__glyceraldehyde3_phoshphatedehydrogenase!486) 3.0110000000000004e+19 #original 5e-05mol/L #__MOD__glyceraldehyde3_phoshphatedehydrogenase_DPNcomplex #MOD
end seed species
begin observables
	Species __GLU__glucose __GLU__glucose(__enz__hexokinase) #(GLU) glucose
	Species __ENZ__hexokinase __ENZ__hexokinase(__glu__glucose) #(ENZ) hexokinase
	Species __ENG__hexokinase_glucoseintermediate __GLU__glucose(__enz__hexokinase!484).__ENZ__hexokinase(__glu__glucose!484) #(ENG) hexokinase-glucose intermediate
	Species __TP1__adenosinetriphosphateinstore1__cytoplasm__ __TP1__adenosinetriphosphateinstore1__cytoplasm__(__TP2__adenosinetriphosphateinstore2__mitochondria__~0) #(TP1) adenosine triphosphate in store 1 (cytoplasm)
	Species __ADP__adenosinediphosphate __ADP__adenosinediphosphate() #(ADP) adenosine diphosphate
	Species __GLP__glucose6_phosphate __GLP__glucose6_phosphate(__etz__phosphofructokinase) #(GLP) glucose 6-phosphate
	Species __ETZ__phosphofructokinase __ETZ__phosphofructokinase(__glp__glucose6_phosphate) #(ETZ) phosphofructokinase
	Species __ETG__phosphofructokinaseintermediate __GLP__glucose6_phosphate(__etz__phosphofructokinase!485).__ETZ__phosphofructokinase(__glp__glucose6_phosphate!485) #(ETG) phosphofructokinase intermediate
	Species __GPP__hexosediphosphate __GAP__glyceraldehyde3_phosphate(__dha__dihydroxacetonephosphate!483).__DHA__dihydroxacetonephosphate(__gap__glyceraldehyde3_phosphate!483) #(GPP) hexose diphosphate
	Species __GAP__glyceraldehyde3_phosphate __GAP__glyceraldehyde3_phosphate(__dha__dihydroxacetonephosphate) #(GAP) glyceraldehyde 3-phosphate
	Species __DHA__dihydroxacetonephosphate __DHA__dihydroxacetonephosphate(__gap__glyceraldehyde3_phosphate) #(DHA) dihydroxacetone phosphate
	Species __DPN__extramitochondrialdiphospyridinenucleotide __DPN__extramitochondrialdiphospyridinenucleotide(__mox__glyceraldehyde3_phoshphatedehydrogenase) #(DPN) extramitochondrial diphospyridine nucleotide
	Species __DPH__extramitochondrialreduceddiphospyridinenucleotide __DPH__extramitochondrialreduceddiphospyridinenucleotide() #(DPH) extramitochondrial reduced diphospyridine nucleotide
	Species __PID__inorganicphosphate __PID__inorganicphosphate(__xi__lowenergyintermediateinoxidativephosphorylation) #(PID) inorganic phosphate
	Species __DGA__1_3diphosphoglycerate __DGA__1_3diphosphoglycerate() #(DGA) 1,3 diphosphoglycerate
	Species __PGA__3phosphoglycerate __PGA__3phosphoglycerate() #(PGA) 3 phosphoglycerate
	Species __PYR__pyruvate __PYR__pyruvate() #(PYR) pyruvate
	Species __LAC__lactate __LAC__lactate() #(LAC) lactate
	Species __DIN__intramitochondrialdiphospyridinenucleotide __DIN__intramitochondrialdiphospyridinenucleotide() #(DIN) intramitochondrial diphospyridine nucleotide
	Species __DIH__intramitochondrialreduceddiphospyridinenucleotide __DIH__intramitochondrialreduceddiphospyridinenucleotide() #(DIH) intramitochondrial reduced diphospyridine nucleotide
	Species __XI__lowenergyintermediateinoxidativephosphorylation __XI__lowenergyintermediateinoxidativephosphorylation(__XSI__highenergyintermediateinoxidativephosphorylation~0,__pid__inorganicphosphate) #(XI) low energy intermediate in oxidative phosphorylation
	Species __XSI__highenergyintermediateinoxidativephosphorylation __XI__lowenergyintermediateinoxidativephosphorylation(__XSI__highenergyintermediateinoxidativephosphorylation~__XSI__highenergyintermediateinoxidativephosphorylation,__pid__inorganicphosphate) #(XSI) high energy intermediate in oxidative phosphorylation
	Species __OXY__oxygen __OXY__oxygen() #(OXY) oxygen
	Species __XSP__phosphorylatedintermediateinoxidativephosphorylation __XI__lowenergyintermediateinoxidativephosphorylation(__XSI__highenergyintermediateinoxidativephosphorylation~__XSI__highenergyintermediateinoxidativephosphorylation,__pid__inorganicphosphate!487).__PID__inorganicphosphate(__xi__lowenergyintermediateinoxidativephosphorylation!487) #(XSP) phosphorylated intermediate in oxidative phosphorylation
	Species __TP2__adenosinetriphosphateinstore2__mitochondria__ __TP1__adenosinetriphosphateinstore1__cytoplasm__(__TP2__adenosinetriphosphateinstore2__mitochondria__~__TP2__adenosinetriphosphateinstore2__mitochondria__) #(TP2) adenosine triphosphate in store 2 (mitochondria)
	Species __PUE__enzymeconcernedinATPutilization __PUE__enzymeconcernedinATPutilization() #(PUE) enzyme concerned in ATP utilization
	Species __PPP__enzymeintermediateconcernedinATPutilization __PPP__enzymeintermediateconcernedinATPutilization() #(PPP) enzyme intermediate concerned in ATP utilization
	Species __AGP__alpha_glycerophosphate __AGP__alpha_glycerophosphate() #(AGP) alpha-glycerophosphate
	Species __MOD__glyceraldehyde3_phoshphatedehydrogenase_DPNcomplex __MOX__glyceraldehyde3_phoshphatedehydrogenase(__dpn__extramitochondrialdiphospyridinenucleotide!486).__DPN__extramitochondrialdiphospyridinenucleotide(__mox__glyceraldehyde3_phoshphatedehydrogenase!486) #(MOD) glyceraldehyde 3-phoshphate dehydrogenase-DPN complex
	Species __MOB__acylenzymeintermediateofglyceraldehyde3_phoshphatedehydrogenase __MOB__acylenzymeintermediateofglyceraldehyde3_phoshphatedehydrogenase() #(MOB) acyl enzyme intermediate of glyceraldehyde 3-phoshphate dehydrogenase
	Species __MOX__glyceraldehyde3_phoshphatedehydrogenase __MOX__glyceraldehyde3_phoshphatedehydrogenase(__dpn__extramitochondrialdiphospyridinenucleotide) #(MOX) glyceraldehyde 3-phoshphate dehydrogenase
end observables
begin functions
	MOX_0() = 20000.0*__MOX__glyceraldehyde3_phoshphatedehydrogenase
	MOB_0() = 10000.0*__MOB__acylenzymeintermediateofglyceraldehyde3_phoshphatedehydrogenase
	MOD_0() = 20000.0*__MOD__glyceraldehyde3_phoshphatedehydrogenase_DPNcomplex
	AGP_0() = 769.230769230769*__AGP__alpha_glycerophosphate
	PPP_0() = 0.326797385620915*__PPP__enzymeintermediateconcernedinATPutilization
	PUE_0() = 326797.385620915*__PUE__enzymeconcernedinATPutilization
	DBP_0() = 40.0*__DBP__dibromophenol
	TP2_0() = 666.666666666667*__TP2__adenosinetriphosphateinstore2__mitochondria__
	XSP_0() = 16666.6666666667*__XSP__phosphorylatedintermediateinoxidativephosphorylation
	OXY_0() = 2000.0*__OXY__oxygen
	XSI_0() = 16666.6666666667*__XSI__highenergyintermediateinoxidativephosphorylation
	XI_0() = 16666.6666666667*__XI__lowenergyintermediateinoxidativephosphorylation
	DIH_0() = 14285.7142857143*__DIH__intramitochondrialreduceddiphospyridinenucleotide
	DIN_0() = 14285.7142857143*__DIN__intramitochondrialdiphospyridinenucleotide
	LAC_0() = 833.333333333333*__LAC__lactate
	PYR_0() = 500.0*__PYR__pyruvate
	PGA_0() = 5000.0*__PGA__3phosphoglycerate
	DGA_0() = 5000.0*__DGA__1_3diphosphoglycerate
	PID_0() = 200.0*__PID__inorganicphosphate
	DPH_0() = 5000.0*__DPH__extramitochondrialreduceddiphospyridinenucleotide
	DPN_0() = 4000.0*__DPN__extramitochondrialdiphospyridinenucleotide
	DHA_0() = 769.230769230769*__DHA__dihydroxacetonephosphate
	GAP_0() = 5000.0*__GAP__glyceraldehyde3_phosphate
	GPP_0() = 1000.0*__GPP__hexosediphosphate
	ETG_0() = 100000.0*__ETG__phosphofructokinaseintermediate
	ETZ_0() = 100000.0*__ETZ__phosphofructokinase
	GLP_0() = 1000.0*__GLP__glucose6_phosphate
	ADP_0() = 1000.0*__ADP__adenosinediphosphate
	TP1_0() = 666.666666666667*__TP1__adenosinetriphosphateinstore1__cytoplasm__
	ENG_0() = 98039.2156862745*__ENG__hexokinase_glucoseintermediate
	ENZ_0() = 98039.2156862745*__ENZ__hexokinase
	GLU_0() = 333.333333333333*__GLU__glucose
	fRate0() = 3000.0
	fRate1() = 10000.0
	fRate2() = 40000.0
	fRate3() = 40000.0
	fRate4() = 0.1
	fRate5() = 2000.0
	fRate6() = 80.0
	fRate7() = 600000.0
	fRate8() = 400.0
	fRate9() = 6000.0
	fRate10() = 10000.0
	fRate11() = 5000.0
	fRate12() = 500.0
	fRate13() = 10.0
	fRate14() = 20.0*__DIN__intramitochondrialdiphospyridinenucleotide*__PYR__pyruvate
	fRate15() = 7500000.0*__DIH__intramitochondrialreduceddiphospyridinenucleotide*__OXY__oxygen*__XI__lowenergyintermediateinoxidativephosphorylation
	fRate16() = 400.0
	fRate17() = 15000.0
	fRate18() = 120.0*__DBP__dibromophenol
	fRate19() = 4.0*__DBP__dibromophenol
	fRate20() = 3000.0
	fRate21() = 2.0
end functions
begin reaction rules
	r_1: __GLU__glucose(__enz__hexokinase) + __ENZ__hexokinase(__glu__glucose) -> __GLU__glucose(__enz__hexokinase!484).__ENZ__hexokinase(__glu__glucose!484) fRate0()
	r_2: __GLU__glucose(__enz__hexokinase!484).__ENZ__hexokinase(__glu__glucose!484) + __TP1__adenosinetriphosphateinstore1__cytoplasm__(__TP2__adenosinetriphosphateinstore2__mitochondria__~0) -> __ADP__adenosinediphosphate() + __GLP__glucose6_phosphate(__etz__phosphofructokinase) + __ENZ__hexokinase(__glu__glucose) fRate1()
	r_3: __GLP__glucose6_phosphate(__etz__phosphofructokinase) + __ETZ__phosphofructokinase(__glp__glucose6_phosphate) -> __GLP__glucose6_phosphate(__etz__phosphofructokinase!485).__ETZ__phosphofructokinase(__glp__glucose6_phosphate!485) fRate2()
	r_4: __GLP__glucose6_phosphate(__etz__phosphofructokinase!485).__ETZ__phosphofructokinase(__glp__glucose6_phosphate!485) + __TP1__adenosinetriphosphateinstore1__cytoplasm__(__TP2__adenosinetriphosphateinstore2__mitochondria__~0) -> __GAP__glyceraldehyde3_phosphate(__dha__dihydroxacetonephosphate!483).__DHA__dihydroxacetonephosphate(__gap__glyceraldehyde3_phosphate!483) + __ETZ__phosphofructokinase(__glp__glucose6_phosphate) + __ADP__adenosinediphosphate() fRate3()
	r_5: __GAP__glyceraldehyde3_phosphate(__dha__dihydroxacetonephosphate!483).__DHA__dihydroxacetonephosphate(__gap__glyceraldehyde3_phosphate!483) -> __GAP__glyceraldehyde3_phosphate(__dha__dihydroxacetonephosphate) + __DHA__dihydroxacetonephosphate(__gap__glyceraldehyde3_phosphate) fRate4()
	r_6: __DHA__dihydroxacetonephosphate(__gap__glyceraldehyde3_phosphate) + __DPH__extramitochondrialreduceddiphospyridinenucleotide() -> __AGP__alpha_glycerophosphate() + __DPN__extramitochondrialdiphospyridinenucleotide(__mox__glyceraldehyde3_phoshphatedehydrogenase) fRate5()
	r_7: __AGP__alpha_glycerophosphate() + __DPN__extramitochondrialdiphospyridinenucleotide(__mox__glyceraldehyde3_phoshphatedehydrogenase) -> __DHA__dihydroxacetonephosphate(__gap__glyceraldehyde3_phosphate) + __DPH__extramitochondrialreduceddiphospyridinenucleotide() fRate6()
	r_8: __GAP__glyceraldehyde3_phosphate(__dha__dihydroxacetonephosphate) + __MOX__glyceraldehyde3_phoshphatedehydrogenase(__dpn__extramitochondrialdiphospyridinenucleotide!486).__DPN__extramitochondrialdiphospyridinenucleotide(__mox__glyceraldehyde3_phoshphatedehydrogenase!486) -> __MOB__acylenzymeintermediateofglyceraldehyde3_phoshphatedehydrogenase() + __DPH__extramitochondrialreduceddiphospyridinenucleotide() fRate7()
	r_9: __MOB__acylenzymeintermediateofglyceraldehyde3_phoshphatedehydrogenase() + __PID__inorganicphosphate(__xi__lowenergyintermediateinoxidativephosphorylation) -> __DGA__1_3diphosphoglycerate() + __MOX__glyceraldehyde3_phoshphatedehydrogenase(__dpn__extramitochondrialdiphospyridinenucleotide) fRate8()
	r_10: __MOX__glyceraldehyde3_phoshphatedehydrogenase(__dpn__extramitochondrialdiphospyridinenucleotide) + __DPN__extramitochondrialdiphospyridinenucleotide(__mox__glyceraldehyde3_phoshphatedehydrogenase) -> __MOX__glyceraldehyde3_phoshphatedehydrogenase(__dpn__extramitochondrialdiphospyridinenucleotide!486).__DPN__extramitochondrialdiphospyridinenucleotide(__mox__glyceraldehyde3_phoshphatedehydrogenase!486) fRate9()
	r_11: __DGA__1_3diphosphoglycerate() + __ADP__adenosinediphosphate() -> __TP1__adenosinetriphosphateinstore1__cytoplasm__(__TP2__adenosinetriphosphateinstore2__mitochondria__~0) + __PGA__3phosphoglycerate() fRate10()
	r_12: __PGA__3phosphoglycerate() + __ADP__adenosinediphosphate() -> __TP1__adenosinetriphosphateinstore1__cytoplasm__(__TP2__adenosinetriphosphateinstore2__mitochondria__~0) + __PYR__pyruvate() fRate11()
	r_13: __PYR__pyruvate() + __DPH__extramitochondrialreduceddiphospyridinenucleotide() -> __LAC__lactate() + __DPN__extramitochondrialdiphospyridinenucleotide(__mox__glyceraldehyde3_phoshphatedehydrogenase) fRate12()
	r_14: __LAC__lactate() + __DPN__extramitochondrialdiphospyridinenucleotide(__mox__glyceraldehyde3_phoshphatedehydrogenase) -> __PYR__pyruvate() + __DPH__extramitochondrialreduceddiphospyridinenucleotide() fRate13()
	r_15_reactants_0: 0  -> __PYR__pyruvate() -1*(fRate14())
	r_15_reactants_1: 0  -> __DIN__intramitochondrialdiphospyridinenucleotide() -1*4.0*(fRate14())
	r_15_products_0: 0  -> __DIH__intramitochondrialreduceddiphospyridinenucleotide() 4.0*fRate14()
	r_16_reactants_0: 0  -> __DIH__intramitochondrialreduceddiphospyridinenucleotide() -1*(fRate15())
	r_16_reactants_1: 0  -> __XI__lowenergyintermediateinoxidativephosphorylation(__XSI__highenergyintermediateinoxidativephosphorylation~0,__pid__inorganicphosphate) -1*3.0*(fRate15())
	r_16_reactants_2: 0  -> __OXY__oxygen() -1*(fRate15())
	r_16_products_0: 0  -> __XI__lowenergyintermediateinoxidativephosphorylation(__XSI__highenergyintermediateinoxidativephosphorylation~__XSI__highenergyintermediateinoxidativephosphorylation,__pid__inorganicphosphate) 3.0*fRate15()
	r_16_products_1: 0  -> __DIN__intramitochondrialdiphospyridinenucleotide() fRate15()
	r_17: __XI__lowenergyintermediateinoxidativephosphorylation(__XSI__highenergyintermediateinoxidativephosphorylation~__XSI__highenergyintermediateinoxidativephosphorylation,__pid__inorganicphosphate) + __PID__inorganicphosphate(__xi__lowenergyintermediateinoxidativephosphorylation) -> __XI__lowenergyintermediateinoxidativephosphorylation(__XSI__highenergyintermediateinoxidativephosphorylation~__XSI__highenergyintermediateinoxidativephosphorylation,__pid__inorganicphosphate!487).__PID__inorganicphosphate(__xi__lowenergyintermediateinoxidativephosphorylation!487) fRate16()
	r_18: __XI__lowenergyintermediateinoxidativephosphorylation(__XSI__highenergyintermediateinoxidativephosphorylation~__XSI__highenergyintermediateinoxidativephosphorylation,__pid__inorganicphosphate!487).__PID__inorganicphosphate(__xi__lowenergyintermediateinoxidativephosphorylation!487) + __ADP__adenosinediphosphate() -> __TP1__adenosinetriphosphateinstore1__cytoplasm__(__TP2__adenosinetriphosphateinstore2__mitochondria__~__TP2__adenosinetriphosphateinstore2__mitochondria__) + __XI__lowenergyintermediateinoxidativephosphorylation(__XSI__highenergyintermediateinoxidativephosphorylation~0,__pid__inorganicphosphate) fRate17()
	r_19: __XI__lowenergyintermediateinoxidativephosphorylation(__XSI__highenergyintermediateinoxidativephosphorylation~__XSI__highenergyintermediateinoxidativephosphorylation,__pid__inorganicphosphate) -> __XI__lowenergyintermediateinoxidativephosphorylation(__XSI__highenergyintermediateinoxidativephosphorylation~0,__pid__inorganicphosphate) fRate18() #Modifiers(DBP)
	r_20: __TP1__adenosinetriphosphateinstore1__cytoplasm__(__TP2__adenosinetriphosphateinstore2__mitochondria__~__TP2__adenosinetriphosphateinstore2__mitochondria__) -> __TP1__adenosinetriphosphateinstore1__cytoplasm__(__TP2__adenosinetriphosphateinstore2__mitochondria__~0) fRate19() #Modifiers(DBP)
	r_21: __TP1__adenosinetriphosphateinstore1__cytoplasm__(__TP2__adenosinetriphosphateinstore2__mitochondria__~0) + __PUE__enzymeconcernedinATPutilization() -> __PPP__enzymeintermediateconcernedinATPutilization() fRate20()
	r_22: __PPP__enzymeintermediateconcernedinATPutilization() -> __ADP__adenosinediphosphate() + __PUE__enzymeconcernedinATPutilization() + __PID__inorganicphosphate(__xi__lowenergyintermediateinoxidativephosphorylation) fRate21()
end reaction rules
end model
