###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL0912070000', 'http://identifiers.org/biomodels.db/BIOMD0000000293']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/20949132']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/biomodels.db/BIOMD0000000105']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0032435', 'http://identifiers.org/go/GO:0070841', 'http://identifiers.org/go/GO:0004843']
#@BQB_IS_PART_OF:['http://identifiers.org/kegg.pathway/ko05012']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_HAS_VERSION:['http://identifiers.org/doid/DOID:1289']
#@BQB_HAS_PROPERTY:['http://identifiers.org/doid/DOID:14330']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 136 molecules and 316 reactions. The translated model has 71 molecules and 321 rules'
###
begin model
begin parameters
	ksynNatP 2.4
	kmisfold 4e-05
	krefold 8e-05
	kbinMisPE3 0.0001
	krelMisPE3 0.0002
	kbinE1Ub 0.0002
	kbinE2Ub 0.001
	kmonoUb 0.001
	kpolyUb 0.01
	kactDUB 0.0001
	kbinProt 5e-06
	kactDUBProt 1e-06
	kactProt 0.01
	kagg1 1e-12
	kagg2 1e-10
	kdisagg1 1e-08
	kdisagg2 8e-09
	kdisagg3 6e-09
	kdisagg4 4e-09
	kdisagg5 2e-09
	kigrowth1 5e-09
	kigrowth2 5e-09
	kbinAggProt 5e-09
	kbinMisPDUB 2e-07
	kgenROS 0.01
	kremROS 0.001
	kubs 0.009
	kubd 4.4e-09
	kubss 0.1
	ksynUCHL1 0.022
	kbinUCHL1Prot 4e-10
	kdegProtUCHL1 0.01
	kdegLysUCHL1 2.7e-09
	kdamUCHL1 1e-08
	kbinLamp2aUCHL1dam 1e-05
	krelLamp2aUCHL1dam 5e-05
	kdegLysUCHL1dam 2.7e-09
	kbinUbUCHL1 3e-06
	krelUbUCHL1 0.05
	kactUchl1 0.0001
	kbinSUBUCHL1 4e-08
	ksynSUB 0.13
	kmisfoldSUB 2e-05
	krefoldSUB 5e-05
	kbinE3SUB 0.0005
	krelE3SUB 0.0002
	ksynasyn 0.028
	kbinasynProt 1.7e-09
	kdegasynProt 0.01
	kbinasynLamp2a 4e-08
	kCMAasyn 0.001
	kdamasyn 5e-08
	kbinasynDUB 2e-07
	kbinasynParkin 0.0001
	krelasynParkin 0.0002
	kaggasyn1 5e-12
	kaggasyn2 5e-10
	kdisaggasyn1 1e-08
	kdisaggasyn2 8e-09
	kdisaggasyn3 6e-09
	kdisaggasyn4 4e-09
	kdisaggasyn5 2e-09
	kgenROSAggP 2e-05
	kagg1dam 1e-05
	kagg2dam 0.005
	kdisaggasyndam1 1e-08
	kdisaggasyndam2 8e-09
	kdisaggasyndam3 6e-09
	kdisaggasyndam4 4e-09
	kdisaggasyndam5 2e-09
	kdisagguchl1dam1 1e-08
	kdisagguchl1dam2 8e-09
	kdisagguchl1dam3 6e-09
	kdisagguchl1dam4 4e-09
	kdisagguchl1dam5 2e-09
	kaggSUB1 1e-12
	kaggSUB2 1e-10
	kdisaggSUB1 1e-08
	kdisaggSUB2 8e-09
	kdisaggSUB3 6e-09
	kdisaggSUB4 4e-09
	kdisaggSUB5 2e-09
	kproteff 1.0
	Source 1.0
	Sink 1.0
end parameters
begin molecule types
	#^ bqbiol:hasPart uniprot:P09936, uniprot:P62988, interpro:IPR000569
	E3SUB_SUB_misfolded_Ub7_UCHL1()
	#^ bqbiol:hasPart uniprot:O60260, uniprot:P37840, uniprot:P62988
	Parkin_asyn_dam_Ub3()
	aggMisP()
	#^ bqbiol:isVersionOf uniprot:O60260
	aggParkin()
	#^ bqbiol:is chebi:CHEBI:36080, uniprot:P62988
	MisP_Ub4_Proteasome()
	#^ bqbiol:isVersionOf chebi:CHEBI:36080
	MisP(NatP~NatP~0,aggp,e3,ub)
	#^ bqbiol:isVersionOf interpro:IPR001394
	aggDUB()
	#^ bqbiol:isVersionOf interpro:IPR000569
	E3(misp)
	aggSUB()
	#^ bqbiol:hasPart uniprot:P09936, uniprot:P62988, interpro:IPR000569
	E3SUB_SUB_misfolded_Ub4_UCHL1()
	#^ bqbiol:isVersionOf uniprot:P62988
	upregUb()
	#^ bqbiol:hasPart uniprot:O60260, uniprot:P37840, uniprot:P62988
	Parkin_asyn_dam_Ub5()
	#^ bqbiol:isVersionOf interpro:IPR000569
	E3SUB(sub)
	#^ bqbiol:isVersionOf uniprot:P37840
	aggasyn()
	#^ bqbiol:hasPart chebi:CHEBI:36080, uniprot:P62988, interpro:IPR001394, interpro:IPR000569
	E3_MisP_Ub8_DUB()
	#^ bqbiol:hasPart uniprot:O60260, uniprot:P37840, uniprot:P62988
	Parkin_asyn_dam_Ub4_DUB()
	#^ bqbiol:isVersionOf uniprot:P09936
	UCHL1(_damaged~_DAMAGED~0,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1)
	#^ bqbiol:isVersionOf uniprot:P09936
	aggUchl1dam()
	#^ bqbiol:isVersionOf chebi:CHEBI:16761
	ADP()
	#^ bqbiol:isVersionOf interpro:IPR000608
	E2(ub)
	AggP(_1~1~0,misp,misp,misp,misp,proteasome)
	#^ bqbiol:is uniprot:P62988, interpro:IPR000569
	E3SUB_SUB_misfolded_Ub6()
	#^ bqbiol:hasPart uniprot:P62988, interpro:IPR000569
	E3SUB_SUB_misfolded_Ub5()
	#^ bqbiol:isVersionOf uniprot:P37840
	aggasyndam()
	#^ bqbiol:hasPart uniprot:O60260, uniprot:P37840, uniprot:P62988
	Parkin_asyn_dam_Ub2_DUB()
	#^ bqbiol:isVersionOf go:GO:0005764
	Lysosome()
	#^ bqbiol:hasPart chebi:CHEBI:36080, uniprot:P62988, interpro:IPR000569
	E3_MisP_Ub8()
	#^ bqbiol:hasPart uniprot:P09936, uniprot:P62988, interpro:IPR000569
	E3SUB_SUB_misfolded_Ub8_UCHL1()
	#^ bqbiol:hasPart uniprot:O60260, uniprot:P37840, uniprot:P62988
	Parkin_asyn_dam_Ub4()
	#^ bqbiol:hasPart uniprot:O60260, uniprot:P37840, uniprot:P62988
	Parkin_asyn_dam_Ub_DUB()
	#^ bqbiol:hasPart chebi:CHEBI:36080, uniprot:P62988, interpro:IPR000569
	E3_MisP_Ub7()
	#^ bqbiol:isVersionOf uniprot:P62988
	Ub(_2~2~0,_3~3~0,_4~4~0,_5~5~0,e1,e2,misp,uchl1)
	#^ bqbiol:hasPart uniprot:O60260, uniprot:P37840, uniprot:P62988
	Parkin_asyn_dam_Ub5_DUB()
	#^ bqbiol:hasPart uniprot:O60260, uniprot:P37840, uniprot:P62988
	Parkin_asyn_dam_Ub6_DUB()
	#^ bqbiol:hasPart uniprot:O60260, uniprot:P37840, uniprot:P62988
	Parkin_asyn_dam_Ub3_DUB()
	#^ bqbiol:hasPart chebi:CHEBI:36080, uniprot:P62988, interpro:IPR000569
	E3_MisP_Ub6()
	#^ bqbiol:hasPart chebi:CHEBI:36080, uniprot:P62988, interpro:IPR001394, interpro:IPR000569
	E3_MisP_Ub2_DUB()
	#^ bqbiol:hasPart uniprot:P09936, uniprot:P62988, interpro:IPR000569
	E3SUB_SUB_misfolded_Ub_UCHL1()
	#^ bqbiol:hasPart uniprot:P09936, uniprot:P62988, interpro:IPR000569
	E3SUB_SUB_misfolded_Ub3_UCHL1()
	#^ bqbiol:hasPart uniprot:O60260, uniprot:P37840, uniprot:P62988
	Parkin_asyn_dam_Ub7_DUB()
	#^ bqbiol:hasPart chebi:CHEBI:36080, uniprot:P62988, go:GO:0000502
	MisP_Ub7_Proteasome(_5~5~0,E3SUB_SUB_misfolded_Ub7~E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~asyn_dam_Ub8_Proteasome~0)
	#^ bqbiol:isVersionOf go:GO:0000502
	Proteasome(aggp,asyn,uchl1)
	#^ bqbiol:isVersionOf interpro:IPR001394
	DUB()
	#^ bqbiol:hasPart uniprot:P62988, interpro:IPR000569
	E3SUB_SUB_misfolded_Ub2()
	#^ bqbiol:hasPart chebi:CHEBI:36080, uniprot:P62988, interpro:IPR001394, interpro:IPR000569
	E3_MisP_Ub6_DUB()
	#^ bqbiol:hasPart uniprot:P62988, interpro:IPR000569
	E3SUB_SUB_misfolded_Ub3()
	#^ bqbiol:hasPart uniprot:P62988, interpro:IPR000569
	E3SUB_SUB_misfolded_Ub4()
	#^ bqbiol:isVersionOf uniprot:O60260
	Parkin(asyn)
	#^ bqbiol:isVersionOf interpro:IPR000011
	E1(ub)
	#^ bqbiol:hasPart uniprot:O60260, uniprot:P37840, uniprot:P62988
	Parkin_asyn_dam_Ub()
	#^ bqbiol:isVersionOf chebi:CHEBI:15422
	ATP()
	#^ bqbiol:hasPart uniprot:P09936, uniprot:P62988, interpro:IPR000569
	E3SUB_SUB_misfolded_Ub2_UCHL1()
	#^ bqbiol:isVersionOf chebi:CHEBI:16027
	AMP()
	#^ bqbiol:hasPart chebi:CHEBI:36080, uniprot:P62988, interpro:IPR001394, interpro:IPR000569
	E3_MisP_Ub_DUB()
	#^ bqbiol:hasPart chebi:CHEBI:36080, uniprot:P62988, interpro:IPR001394, interpro:IPR000569
	E3_MisP_Ub3_DUB()
	SeqAggP()
	#^ bqbiol:hasPart uniprot:P09936, uniprot:P62988, interpro:IPR000569
	E3SUB_SUB_misfolded_Ub6_UCHL1()
	#^ bqbiol:hasPart chebi:CHEBI:36080, uniprot:P62988, interpro:IPR001394, interpro:IPR000569
	E3_MisP_Ub5_DUB()
	#^ bqbiol:hasPart uniprot:O60260, uniprot:P37840, uniprot:P62988
	Parkin_asyn_dam_Ub2()
	#^ bqbiol:isVersionOf interpro:IPR000569
	aggE3()
	#^ bqbiol:hasPart uniprot:P09936, uniprot:P62988, interpro:IPR000569
	E3SUB_SUB_misfolded_Ub5_UCHL1()
	#^ bqbiol:isVersionOf uniprot:P09936
	aggUchl1()
	#^ bqbiol:isVersionOf chebi:CHEBI:26523
	ROS()
	#^ bqbiol:isVersionOf uniprot:P13473
	Lamp2a(asyn,uchl1)
	SUB(_misfolded~_MISFOLDED~0,e3sub,sub,sub,sub,sub,sub)
	#^ bqbiol:hasPart chebi:CHEBI:36080, uniprot:P62988, interpro:IPR001394, interpro:IPR000569
	E3_MisP_Ub7_DUB()
	#^ bqbiol:isVersionOf uniprot:P62988
	aggUb()
	#^ bqbiol:isVersionOf uniprot:P37840
	asyn(_dam~_DAM~0,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome)
	#^ bqbiol:hasPart chebi:CHEBI:36080, uniprot:P62988, interpro:IPR001394, interpro:IPR000569
	E3_MisP_Ub4_DUB()
	#^ bqbiol:hasPart uniprot:O60260, uniprot:P37840, uniprot:P62988
	Parkin_asyn_dam_Ub8_DUB()
	#^ bqbiol:hasPart uniprot:P62988, interpro:IPR000569
	E3SUB_SUB_misfolded_Ub()
end molecule types
begin seed species
	MisP(NatP~NatP,aggp,e3,ub) 6000.0 #NatP #NatP
	MisP(NatP~0,aggp,e3,ub) 80.0 #MisP #MisP
	Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) 1500.0 #Ub #Ub
	E1(ub) 105.0 #E1 #E1
	E2(ub) 50.0 #E2 #E2
	E3(misp) 300.0 #E3 #E3
	MisP(NatP~0,aggp,e3!512,ub).E3(misp!512) 2.0 #E3_MisP #E3_MisP
	DUB() 160.0 #DUB #DUB
	Proteasome(aggp,asyn,uchl1) 1500.0 #Proteasome #Proteasome
	ROS() 10.0 #ROS #ROS
	Ub(_2~0,_3~0,_4~0,_5~0,e1!170,e2,misp,uchl1).E1(ub!170) 795.0 #E1_Ub #E1_Ub
	Ub(_2~0,_3~0,_4~0,_5~0,e1,e2!171,misp,uchl1).E2(ub!171) 950.0 #E2_Ub #E2_Ub
	E3_MisP_Ub8() 300.0 #E3_MisP_Ub8 #E3_MisP_Ub8
	MisP_Ub7_Proteasome(_5~5,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~MisP_Ub5_Proteasome,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) 1.0 #MisP_Ub5_Proteasome #MisP_Ub5_Proteasome
	MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~MisP_Ub6_Proteasome,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) 2.0 #MisP_Ub6_Proteasome #MisP_Ub6_Proteasome
	MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) 10.0 #MisP_Ub7_Proteasome #MisP_Ub7_Proteasome
	MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~MisP_Ub8_Proteasome,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) 350.0 #MisP_Ub8_Proteasome #MisP_Ub8_Proteasome
	E3_MisP_Ub_DUB() 100.0 #E3_MisP_Ub_DUB #E3_MisP_Ub_DUB
	E3_MisP_Ub2_DUB() 100.0 #E3_MisP_Ub2_DUB #E3_MisP_Ub2_DUB
	E3_MisP_Ub3_DUB() 100.0 #E3_MisP_Ub3_DUB #E3_MisP_Ub3_DUB
	E3_MisP_Ub4_DUB() 100.0 #E3_MisP_Ub4_DUB #E3_MisP_Ub4_DUB
	E3_MisP_Ub5_DUB() 100.0 #E3_MisP_Ub5_DUB #E3_MisP_Ub5_DUB
	E3_MisP_Ub6_DUB() 100.0 #E3_MisP_Ub6_DUB #E3_MisP_Ub6_DUB
	E3_MisP_Ub7_DUB() 100.0 #E3_MisP_Ub7_DUB #E3_MisP_Ub7_DUB
	E3_MisP_Ub8_DUB() 100.0 #E3_MisP_Ub8_DUB #E3_MisP_Ub8_DUB
	$ATP() 10000.0 #ATP #ATP
	$ADP() 1000.0 #ADP #ADP
	$AMP() 1000.0 #AMP #AMP
	UCHL1(_damaged~0,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) 5785.0 #UCHL1 #UCHL1
	UCHL1(_damaged~0,lamp2a,proteasome!516,ub,uchl1,uchl1,uchl1,uchl1,uchl1).Proteasome(aggp,asyn,uchl1!516) 10.0 #UCHL1_Proteasome #UCHL1_Proteasome
	Lysosome() 1200.0 #Lysosome #Lysosome
	Lamp2a(asyn,uchl1) 200.0 #Lamp2a #Lamp2a
	UCHL1(_damaged~0,lamp2a,proteasome,ub!513,uchl1,uchl1,uchl1,uchl1,uchl1).Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1!513) 500.0 #Ub_UCHL1 #Ub_UCHL1
	SUB(_misfolded~0,e3sub,sub,sub,sub,sub,sub) 815.0 #SUB #SUB
	SUB(_misfolded~_MISFOLDED,e3sub,sub,sub,sub,sub,sub) 5.0 #SUB_misfolded #SUB_misfolded
	E3SUB(sub) 160.0 #E3SUB #E3SUB
	SUB(_misfolded~_MISFOLDED,e3sub!518,sub,sub,sub,sub,sub).E3SUB(sub!518) 5.0 #E3SUB_SUB_misfolded #E3SUB_SUB_misfolded
	MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~E3SUB_SUB_misfolded_Ub8,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) 15.0 #E3SUB_SUB_misfolded_Ub8 #E3SUB_SUB_misfolded_Ub8
	E3SUB_SUB_misfolded_Ub_UCHL1() 20.0 #E3SUB_SUB_misfolded_Ub_UCHL1 #E3SUB_SUB_misfolded_Ub_UCHL1
	E3SUB_SUB_misfolded_Ub2_UCHL1() 20.0 #E3SUB_SUB_misfolded_Ub2_UCHL1 #E3SUB_SUB_misfolded_Ub2_UCHL1
	E3SUB_SUB_misfolded_Ub3_UCHL1() 25.0 #E3SUB_SUB_misfolded_Ub3_UCHL1 #E3SUB_SUB_misfolded_Ub3_UCHL1
	E3SUB_SUB_misfolded_Ub4_UCHL1() 25.0 #E3SUB_SUB_misfolded_Ub4_UCHL1 #E3SUB_SUB_misfolded_Ub4_UCHL1
	E3SUB_SUB_misfolded_Ub5_UCHL1() 30.0 #E3SUB_SUB_misfolded_Ub5_UCHL1 #E3SUB_SUB_misfolded_Ub5_UCHL1
	E3SUB_SUB_misfolded_Ub6_UCHL1() 30.0 #E3SUB_SUB_misfolded_Ub6_UCHL1 #E3SUB_SUB_misfolded_Ub6_UCHL1
	E3SUB_SUB_misfolded_Ub7_UCHL1() 40.0 #E3SUB_SUB_misfolded_Ub7_UCHL1 #E3SUB_SUB_misfolded_Ub7_UCHL1
	E3SUB_SUB_misfolded_Ub8_UCHL1() 40.0 #E3SUB_SUB_misfolded_Ub8_UCHL1 #E3SUB_SUB_misfolded_Ub8_UCHL1
	MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~SUB_misfolded_Ub7_Proteasome,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) 5.0 #SUB_misfolded_Ub7_Proteasome #SUB_misfolded_Ub7_Proteasome
	MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~SUB_misfolded_Ub8_Proteasome,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) 20.0 #SUB_misfolded_Ub8_Proteasome #SUB_misfolded_Ub8_Proteasome
	asyn(_dam~0,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) 3000.0 #asyn #asyn
	Parkin(asyn) 4800.0 #Parkin #Parkin
end seed species
begin observables
	Species NatP MisP(NatP~NatP,aggp,e3,ub) #NatP
	Species MisP MisP(NatP~0,aggp,e3,ub) #MisP
	Species Ub Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) #Ub
	Species E1 E1(ub) #E1
	Species E2 E2(ub) #E2
	Species E3 E3(misp) #E3
	Species E3_MisP MisP(NatP~0,aggp,e3!512,ub).E3(misp!512) #E3_MisP
	Species DUB DUB() #DUB
	Species Proteasome Proteasome(aggp,asyn,uchl1) #Proteasome
	Species ROS ROS() #ROS
	Species E1_Ub Ub(_2~0,_3~0,_4~0,_5~0,e1!170,e2,misp,uchl1).E1(ub!170) #E1_Ub
	Species E2_Ub Ub(_2~0,_3~0,_4~0,_5~0,e1,e2!171,misp,uchl1).E2(ub!171) #E2_Ub
	Species E3_MisP_Ub Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp!524,uchl1).MisP(NatP~0,aggp,e3!512,ub!524).E3(misp!512) #E3_MisP_Ub
	Species E3_MisP_Ub2 Ub(_2~2,_3~0,_4~0,_5~0,e1,e2,misp!524,uchl1).MisP(NatP~0,aggp,e3!512,ub!524).E3(misp!512) #E3_MisP_Ub2
	Species E3_MisP_Ub3 Ub(_2~0,_3~3,_4~0,_5~0,e1,e2,misp!524,uchl1).MisP(NatP~0,aggp,e3!512,ub!524).E3(misp!512) #E3_MisP_Ub3
	Species E3_MisP_Ub4 Ub(_2~0,_3~0,_4~4,_5~0,e1,e2,misp!524,uchl1).MisP(NatP~0,aggp,e3!512,ub!524).E3(misp!512) #E3_MisP_Ub4
	Species E3_MisP_Ub5 Ub(_2~0,_3~0,_4~0,_5~5,e1,e2,misp!524,uchl1).MisP(NatP~0,aggp,e3!512,ub!524).E3(misp!512) #E3_MisP_Ub5
	Species E3_MisP_Ub6 E3_MisP_Ub6() #E3_MisP_Ub6
	Species E3_MisP_Ub7 E3_MisP_Ub7() #E3_MisP_Ub7
	Species E3_MisP_Ub8 E3_MisP_Ub8() #E3_MisP_Ub8
	Species MisP_Ub4_Proteasome MisP_Ub4_Proteasome() #MisP_Ub4_Proteasome
	Species MisP_Ub5_Proteasome MisP_Ub7_Proteasome(_5~5,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~MisP_Ub5_Proteasome,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) #MisP_Ub5_Proteasome
	Species MisP_Ub6_Proteasome MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~MisP_Ub6_Proteasome,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) #MisP_Ub6_Proteasome
	Species MisP_Ub7_Proteasome MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) #MisP_Ub7_Proteasome
	Species MisP_Ub8_Proteasome MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~MisP_Ub8_Proteasome,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) #MisP_Ub8_Proteasome
	Species E3_MisP_Ub_DUB E3_MisP_Ub_DUB() #E3_MisP_Ub_DUB
	Species E3_MisP_Ub2_DUB E3_MisP_Ub2_DUB() #E3_MisP_Ub2_DUB
	Species E3_MisP_Ub3_DUB E3_MisP_Ub3_DUB() #E3_MisP_Ub3_DUB
	Species E3_MisP_Ub4_DUB E3_MisP_Ub4_DUB() #E3_MisP_Ub4_DUB
	Species E3_MisP_Ub5_DUB E3_MisP_Ub5_DUB() #E3_MisP_Ub5_DUB
	Species E3_MisP_Ub6_DUB E3_MisP_Ub6_DUB() #E3_MisP_Ub6_DUB
	Species E3_MisP_Ub7_DUB E3_MisP_Ub7_DUB() #E3_MisP_Ub7_DUB
	Species E3_MisP_Ub8_DUB E3_MisP_Ub8_DUB() #E3_MisP_Ub8_DUB
	Species AggP1 AggP(_1~1,misp,misp,misp,misp,proteasome) #AggP1
	Species AggP2 AggP(_1~1,misp!493,misp,misp,misp,proteasome).MisP(NatP~0,aggp!493,e3,ub) #AggP2
	Species AggP3 AggP(_1~1,misp!493,misp!494,misp,misp,proteasome).MisP(NatP~0,aggp!493,e3,ub).MisP(NatP~0,aggp!494,e3,ub) #AggP3
	Species AggP4 AggP(_1~1,misp!493,misp!494,misp!495,misp,proteasome).MisP(NatP~0,aggp!493,e3,ub).MisP(NatP~0,aggp!494,e3,ub).MisP(NatP~0,aggp!495,e3,ub) #AggP4
	Species AggP5 AggP(_1~1,misp!493,misp!494,misp!495,misp!496,proteasome).MisP(NatP~0,aggp!493,e3,ub).MisP(NatP~0,aggp!494,e3,ub).MisP(NatP~0,aggp!495,e3,ub).MisP(NatP~0,aggp!496,e3,ub) #AggP5
	Species SeqAggP SeqAggP() #SeqAggP
	Species AggP_Proteasome AggP(_1~0,misp,misp,misp,misp,proteasome!172).Proteasome(aggp!172,asyn,uchl1) #AggP_Proteasome
	Species ATP ATP() #ATP
	Species ADP ADP() #ADP
	Species AMP AMP() #AMP
	Species UCHL1 UCHL1(_damaged~0,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) #UCHL1
	Species UCHL1_Proteasome UCHL1(_damaged~0,lamp2a,proteasome!516,ub,uchl1,uchl1,uchl1,uchl1,uchl1).Proteasome(aggp,asyn,uchl1!516) #UCHL1_Proteasome
	Species UCHL1_damaged_Proteasome UCHL1(_damaged~_DAMAGED,lamp2a,proteasome!516,ub,uchl1,uchl1,uchl1,uchl1,uchl1).Proteasome(aggp,asyn,uchl1!516) #UCHL1_damaged_Proteasome
	Species Lysosome Lysosome() #Lysosome
	Species UCHL1_damaged UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) #UCHL1_damaged
	Species Lamp2a Lamp2a(asyn,uchl1) #Lamp2a
	Species Lamp2a_UCHL1_damaged UCHL1(_damaged~_DAMAGED,lamp2a!519,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1).Lamp2a(asyn,uchl1!519) #Lamp2a_UCHL1_damaged
	Species Ub_UCHL1 UCHL1(_damaged~0,lamp2a,proteasome,ub!513,uchl1,uchl1,uchl1,uchl1,uchl1).Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1!513) #Ub_UCHL1
	Species SUB SUB(_misfolded~0,e3sub,sub,sub,sub,sub,sub) #SUB
	Species SUB_misfolded SUB(_misfolded~_MISFOLDED,e3sub,sub,sub,sub,sub,sub) #SUB_misfolded
	Species E3SUB E3SUB(sub) #E3SUB
	Species E3SUB_SUB_misfolded SUB(_misfolded~_MISFOLDED,e3sub!518,sub,sub,sub,sub,sub).E3SUB(sub!518) #E3SUB_SUB_misfolded
	Species E3SUB_SUB_misfolded_Ub E3SUB_SUB_misfolded_Ub() #E3SUB_SUB_misfolded_Ub
	Species E3SUB_SUB_misfolded_Ub2 E3SUB_SUB_misfolded_Ub2() #E3SUB_SUB_misfolded_Ub2
	Species E3SUB_SUB_misfolded_Ub3 E3SUB_SUB_misfolded_Ub3() #E3SUB_SUB_misfolded_Ub3
	Species E3SUB_SUB_misfolded_Ub4 E3SUB_SUB_misfolded_Ub4() #E3SUB_SUB_misfolded_Ub4
	Species E3SUB_SUB_misfolded_Ub5 E3SUB_SUB_misfolded_Ub5() #E3SUB_SUB_misfolded_Ub5
	Species E3SUB_SUB_misfolded_Ub6 E3SUB_SUB_misfolded_Ub6() #E3SUB_SUB_misfolded_Ub6
	Species E3SUB_SUB_misfolded_Ub7 MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~E3SUB_SUB_misfolded_Ub7,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) #E3SUB_SUB_misfolded_Ub7
	Species E3SUB_SUB_misfolded_Ub8 MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~E3SUB_SUB_misfolded_Ub8,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) #E3SUB_SUB_misfolded_Ub8
	Species E3SUB_SUB_misfolded_Ub_UCHL1 E3SUB_SUB_misfolded_Ub_UCHL1() #E3SUB_SUB_misfolded_Ub_UCHL1
	Species E3SUB_SUB_misfolded_Ub2_UCHL1 E3SUB_SUB_misfolded_Ub2_UCHL1() #E3SUB_SUB_misfolded_Ub2_UCHL1
	Species E3SUB_SUB_misfolded_Ub3_UCHL1 E3SUB_SUB_misfolded_Ub3_UCHL1() #E3SUB_SUB_misfolded_Ub3_UCHL1
	Species E3SUB_SUB_misfolded_Ub4_UCHL1 E3SUB_SUB_misfolded_Ub4_UCHL1() #E3SUB_SUB_misfolded_Ub4_UCHL1
	Species E3SUB_SUB_misfolded_Ub5_UCHL1 E3SUB_SUB_misfolded_Ub5_UCHL1() #E3SUB_SUB_misfolded_Ub5_UCHL1
	Species E3SUB_SUB_misfolded_Ub6_UCHL1 E3SUB_SUB_misfolded_Ub6_UCHL1() #E3SUB_SUB_misfolded_Ub6_UCHL1
	Species E3SUB_SUB_misfolded_Ub7_UCHL1 E3SUB_SUB_misfolded_Ub7_UCHL1() #E3SUB_SUB_misfolded_Ub7_UCHL1
	Species E3SUB_SUB_misfolded_Ub8_UCHL1 E3SUB_SUB_misfolded_Ub8_UCHL1() #E3SUB_SUB_misfolded_Ub8_UCHL1
	Species SUB_misfolded_Ub4_Proteasome MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~SUB_misfolded_Ub4_Proteasome,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) #SUB_misfolded_Ub4_Proteasome
	Species SUB_misfolded_Ub5_Proteasome MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~SUB_misfolded_Ub5_Proteasome,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) #SUB_misfolded_Ub5_Proteasome
	Species SUB_misfolded_Ub6_Proteasome MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~SUB_misfolded_Ub6_Proteasome,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) #SUB_misfolded_Ub6_Proteasome
	Species SUB_misfolded_Ub7_Proteasome MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~SUB_misfolded_Ub7_Proteasome,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) #SUB_misfolded_Ub7_Proteasome
	Species SUB_misfolded_Ub8_Proteasome MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~SUB_misfolded_Ub8_Proteasome,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) #SUB_misfolded_Ub8_Proteasome
	Species asyn asyn(_dam~0,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) #asyn
	Species asyn_Proteasome asyn(_dam~0,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome!515).Proteasome(aggp,asyn!515,uchl1) #asyn_Proteasome
	Species asyn_Lamp2a asyn(_dam~0,asyn,asyn,asyn,asyn,asyn,lamp2a!514,parkin,proteasome).Lamp2a(asyn!514,uchl1) #asyn_Lamp2a
	Species asyn_dam asyn(_dam~_DAM,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) #asyn_dam
	Species Parkin Parkin(asyn) #Parkin
	Species Parkin_asyn_dam asyn(_dam~_DAM,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin!517,proteasome).Parkin(asyn!517) #Parkin_asyn_dam
	Species Parkin_asyn_dam_Ub Parkin_asyn_dam_Ub() #Parkin_asyn_dam_Ub
	Species Parkin_asyn_dam_Ub2 Parkin_asyn_dam_Ub2() #Parkin_asyn_dam_Ub2
	Species Parkin_asyn_dam_Ub3 Parkin_asyn_dam_Ub3() #Parkin_asyn_dam_Ub3
	Species Parkin_asyn_dam_Ub4 Parkin_asyn_dam_Ub4() #Parkin_asyn_dam_Ub4
	Species Parkin_asyn_dam_Ub5 Parkin_asyn_dam_Ub5() #Parkin_asyn_dam_Ub5
	Species Parkin_asyn_dam_Ub6 MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~Parkin_asyn_dam_Ub6,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) #Parkin_asyn_dam_Ub6
	Species Parkin_asyn_dam_Ub7 MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~Parkin_asyn_dam_Ub7,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) #Parkin_asyn_dam_Ub7
	Species Parkin_asyn_dam_Ub8 MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~Parkin_asyn_dam_Ub8,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) #Parkin_asyn_dam_Ub8
	Species Parkin_asyn_dam_Ub_DUB Parkin_asyn_dam_Ub_DUB() #Parkin_asyn_dam_Ub_DUB
	Species Parkin_asyn_dam_Ub2_DUB Parkin_asyn_dam_Ub2_DUB() #Parkin_asyn_dam_Ub2_DUB
	Species Parkin_asyn_dam_Ub3_DUB Parkin_asyn_dam_Ub3_DUB() #Parkin_asyn_dam_Ub3_DUB
	Species Parkin_asyn_dam_Ub4_DUB Parkin_asyn_dam_Ub4_DUB() #Parkin_asyn_dam_Ub4_DUB
	Species Parkin_asyn_dam_Ub5_DUB Parkin_asyn_dam_Ub5_DUB() #Parkin_asyn_dam_Ub5_DUB
	Species Parkin_asyn_dam_Ub6_DUB Parkin_asyn_dam_Ub6_DUB() #Parkin_asyn_dam_Ub6_DUB
	Species Parkin_asyn_dam_Ub7_DUB Parkin_asyn_dam_Ub7_DUB() #Parkin_asyn_dam_Ub7_DUB
	Species Parkin_asyn_dam_Ub8_DUB Parkin_asyn_dam_Ub8_DUB() #Parkin_asyn_dam_Ub8_DUB
	Species asyn_dam_Ub4_Proteasome MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~asyn_dam_Ub4_Proteasome,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) #asyn_dam_Ub4_Proteasome
	Species asyn_dam_Ub5_Proteasome MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~asyn_dam_Ub5_Proteasome,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) #asyn_dam_Ub5_Proteasome
	Species asyn_dam_Ub6_Proteasome MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~asyn_dam_Ub6_Proteasome,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) #asyn_dam_Ub6_Proteasome
	Species asyn_dam_Ub7_Proteasome MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~asyn_dam_Ub7_Proteasome,asyn_dam_Ub8_Proteasome~0) #asyn_dam_Ub7_Proteasome
	Species asyn_dam_Ub8_Proteasome MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~asyn_dam_Ub8_Proteasome) #asyn_dam_Ub8_Proteasome
	Species AggA1 asyn(_dam~0,asyn!511,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) #AggA1
	Species AggA2 asyn(_dam~0,asyn!511,asyn!523,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn!522,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!522,asyn!523,asyn,asyn,asyn,lamp2a,parkin,proteasome) #AggA2
	Species AggA3 asyn(_dam~0,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!522,asyn!523,asyn!527,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!525,asyn!526,asyn!527,asyn,asyn,lamp2a,parkin,proteasome) #AggA3
	Species AggA4 asyn(_dam~0,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!522,asyn!523,asyn!527,asyn!538,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!525,asyn!526,asyn!527,asyn!539,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!538,asyn!539,asyn,asyn,asyn,lamp2a,parkin,proteasome) #AggA4
	Species AggA5 asyn(_dam~0,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!522,asyn!523,asyn!527,asyn!538,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!525,asyn!526,asyn!527,asyn!539,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!538,asyn!539,asyn!540,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!540,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) #AggA5
	Species AggD1 asyn(_dam~_DAM,asyn!511,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) #AggD1
	Species AggD2 asyn(_dam~_DAM,asyn!511,asyn!523,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn!522,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!522,asyn!523,asyn,asyn,asyn,lamp2a,parkin,proteasome) #AggD2
	Species AggD3 asyn(_dam~_DAM,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!522,asyn!523,asyn!527,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!525,asyn!526,asyn!527,asyn,asyn,lamp2a,parkin,proteasome) #AggD3
	Species AggD4 asyn(_dam~_DAM,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!522,asyn!523,asyn!527,asyn!538,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!525,asyn!526,asyn!527,asyn!539,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!538,asyn!539,asyn,asyn,asyn,lamp2a,parkin,proteasome) #AggD4
	Species AggD5 asyn(_dam~_DAM,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!522,asyn!523,asyn!527,asyn!538,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!525,asyn!526,asyn!527,asyn!539,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!538,asyn!539,asyn!540,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!540,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) #AggD5
	Species AggU1 UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1,uchl1,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1,uchl1,uchl1,uchl1) #AggU1
	Species AggU2 UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!529,uchl1,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!528,uchl1,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!528,uchl1!529,uchl1,uchl1,uchl1) #AggU2
	Species AggU3 UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!529,uchl1!533,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!528,uchl1!532,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!528,uchl1!529,uchl1!534,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!532,uchl1!533,uchl1!534,uchl1,uchl1) #AggU3
	Species AggU4 UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!529,uchl1!533,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!528,uchl1!532,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!528,uchl1!529,uchl1!534,uchl1!541,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!532,uchl1!533,uchl1!534,uchl1!542,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!541,uchl1!542,uchl1,uchl1,uchl1) #AggU4
	Species AggU5 UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!529,uchl1!533,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!528,uchl1!532,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!528,uchl1!529,uchl1!534,uchl1!541,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!532,uchl1!533,uchl1!534,uchl1!542,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!541,uchl1!542,uchl1!545,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!545,uchl1,uchl1,uchl1,uchl1) #AggU5
	Species AggS1 SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub,sub,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub,sub,sub,sub) #AggS1
	Species AggS2 SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!531,sub,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!530,sub,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!530,sub!531,sub,sub,sub) #AggS2
	Species AggS3 SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!531,sub!536,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!530,sub!535,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!530,sub!531,sub!537,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!535,sub!536,sub!537,sub,sub) #AggS3
	Species AggS4 SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!531,sub!536,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!530,sub!535,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!530,sub!531,sub!537,sub!543,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!535,sub!536,sub!537,sub!544,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!543,sub!544,sub,sub,sub) #AggS4
	Species AggS5 SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!531,sub!536,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!530,sub!535,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!530,sub!531,sub!537,sub!543,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!535,sub!536,sub!537,sub!544,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!543,sub!544,sub!546,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!546,sub,sub,sub,sub) #AggS5
	Species aggasyn aggasyn() #aggasyn
	Species aggasyndam aggasyndam() #aggasyndam
	Species aggParkin aggParkin() #aggParkin
	Species aggUb aggUb() #aggUb
	Species aggE3 aggE3() #aggE3
	Species aggDUB aggDUB() #aggDUB
	Species aggMisP aggMisP() #aggMisP
	Species aggUchl1 aggUchl1() #aggUchl1
	Species aggUchl1dam aggUchl1dam() #aggUchl1dam
	Species aggSUB aggSUB() #aggSUB
	Species upregUb upregUb() #upregUb
end observables
begin functions
	UCHL1_substrate() = E3SUB_SUB_misfolded_Ub2_UCHL1 + E3SUB_SUB_misfolded_Ub3_UCHL1 + E3SUB_SUB_misfolded_Ub4_UCHL1 + E3SUB_SUB_misfolded_Ub5_UCHL1 + E3SUB_SUB_misfolded_Ub6_UCHL1 + E3SUB_SUB_misfolded_Ub7_UCHL1 + E3SUB_SUB_misfolded_Ub8_UCHL1 + E3SUB_SUB_misfolded_Ub_UCHL1 + Lamp2a_UCHL1_damaged + UCHL1_Proteasome + UCHL1_damaged + UCHL1_damaged_Proteasome + Ub_UCHL1
	Tot_UCHL1() = UCHL1 + UCHL1_substrate
	Ub_Conjugates() = E1_Ub + E2_Ub + E3SUB_SUB_misfolded_Ub + 2*E3SUB_SUB_misfolded_Ub2 + 2*E3SUB_SUB_misfolded_Ub2_UCHL1 + 3*E3SUB_SUB_misfolded_Ub3 + 3*E3SUB_SUB_misfolded_Ub3_UCHL1 + 4*E3SUB_SUB_misfolded_Ub4 + 4*E3SUB_SUB_misfolded_Ub4_UCHL1 + 5*E3SUB_SUB_misfolded_Ub5 + 5*E3SUB_SUB_misfolded_Ub5_UCHL1 + 6*E3SUB_SUB_misfolded_Ub6 + 6*E3SUB_SUB_misfolded_Ub6_UCHL1 + 7*E3SUB_SUB_misfolded_Ub7 + 7*E3SUB_SUB_misfolded_Ub7_UCHL1 + 8*E3SUB_SUB_misfolded_Ub8 + 8*E3SUB_SUB_misfolded_Ub8_UCHL1 + 2*E3SUB_SUB_misfolded_Ub_UCHL1 + E3_MisP_Ub + 2*E3_MisP_Ub2 + 2*E3_MisP_Ub2_DUB + 3*E3_MisP_Ub3 + 3*E3_MisP_Ub3_DUB + 4*E3_MisP_Ub4 + 4*E3_MisP_Ub4_DUB + 5*E3_MisP_Ub5 + 5*E3_MisP_Ub5_DUB + 6*E3_MisP_Ub6 + 6*E3_MisP_Ub6_DUB + 7*E3_MisP_Ub7 + 7*E3_MisP_Ub7_DUB + 8*E3_MisP_Ub8 + 8*E3_MisP_Ub8_DUB + E3_MisP_Ub_DUB + 4*MisP_Ub4_Proteasome + 5*MisP_Ub5_Proteasome + 6*MisP_Ub6_Proteasome + 7*MisP_Ub7_Proteasome + 8*MisP_Ub8_Proteasome + Parkin_asyn_dam_Ub + 2*Parkin_asyn_dam_Ub2 + 2*Parkin_asyn_dam_Ub2_DUB + 3*Parkin_asyn_dam_Ub3 + 3*Parkin_asyn_dam_Ub3_DUB + 4*Parkin_asyn_dam_Ub4 + 4*Parkin_asyn_dam_Ub4_DUB + 5*Parkin_asyn_dam_Ub5 + 5*Parkin_asyn_dam_Ub5_DUB + 6*Parkin_asyn_dam_Ub6 + 6*Parkin_asyn_dam_Ub6_DUB + 7*Parkin_asyn_dam_Ub7 + 7*Parkin_asyn_dam_Ub7_DUB + 8*Parkin_asyn_dam_Ub8 + 8*Parkin_asyn_dam_Ub8_DUB + Parkin_asyn_dam_Ub_DUB + 4*SUB_misfolded_Ub4_Proteasome + 5*SUB_misfolded_Ub5_Proteasome + 6*SUB_misfolded_Ub6_Proteasome + 7*SUB_misfolded_Ub7_Proteasome + 8*SUB_misfolded_Ub8_Proteasome + Ub_UCHL1 + aggUb + 4*asyn_dam_Ub4_Proteasome + 5*asyn_dam_Ub5_Proteasome + 6*asyn_dam_Ub6_Proteasome + 7*asyn_dam_Ub7_Proteasome + 8*asyn_dam_Ub8_Proteasome + upregUb
	Tot_Ub() = Ub + Ub_Conjugates
	Tot_MisP() = E3_MisP + E3_MisP_Ub + E3_MisP_Ub2 + E3_MisP_Ub2_DUB + E3_MisP_Ub3 + E3_MisP_Ub3_DUB + E3_MisP_Ub4 + E3_MisP_Ub4_DUB + E3_MisP_Ub5 + E3_MisP_Ub5_DUB + E3_MisP_Ub6 + E3_MisP_Ub6_DUB + E3_MisP_Ub7 + E3_MisP_Ub7_DUB + E3_MisP_Ub8 + E3_MisP_Ub8_DUB + E3_MisP_Ub_DUB + MisP + MisP_Ub4_Proteasome + MisP_Ub5_Proteasome + MisP_Ub6_Proteasome + MisP_Ub7_Proteasome + MisP_Ub8_Proteasome
	Tot_Protein() = NatP + Tot_MisP
	Tot_asyn() = asyn + asyn_Lamp2a + asyn_Proteasome
	Tot_asyn_dam() = Parkin_asyn_dam + Parkin_asyn_dam_Ub + Parkin_asyn_dam_Ub2 + Parkin_asyn_dam_Ub2_DUB + Parkin_asyn_dam_Ub3 + Parkin_asyn_dam_Ub3_DUB + Parkin_asyn_dam_Ub4 + Parkin_asyn_dam_Ub4_DUB + Parkin_asyn_dam_Ub5 + Parkin_asyn_dam_Ub5_DUB + Parkin_asyn_dam_Ub6 + Parkin_asyn_dam_Ub6_DUB + Parkin_asyn_dam_Ub7 + Parkin_asyn_dam_Ub7_DUB + Parkin_asyn_dam_Ub8 + Parkin_asyn_dam_Ub8_DUB + Parkin_asyn_dam_Ub_DUB + asyn_dam + 2*asyn_dam_Ub4_Proteasome + asyn_dam_Ub5_Proteasome + asyn_dam_Ub6_Proteasome + asyn_dam_Ub7_Proteasome + asyn_dam_Ub8_Proteasome
	AggP() = AggA1 + AggA2 + AggA3 + AggA4 + AggA5 + AggD1 + AggD2 + AggD3 + AggD4 + AggD5 + AggP1 + AggP2 + AggP3 + AggP4 + AggP5 + AggS1 + AggS2 + AggS3 + AggS4 + AggS5 + AggU1 + AggU2 + AggU3 + AggU4 + AggU5 + aggDUB + aggE3 + aggMisP + aggParkin + aggSUB + aggUb + aggUchl1 + aggUchl1dam + aggasyn + aggasyndam
	fRate0() = Source*kubs
	fRate1() = kproteff*kubd
	fRate2() = MisP^5*kubss/(MisP^6 + 1.1390625e+19)
	fRate3() = Source*ksynNatP
	fRate8() = kbinE1Ub/(ATP + 5000.0)
	fRate44() = kactProt*kproteff/(ATP + 5000.0)
	fRate45() = kactProt*kproteff/(ATP + 5000.0)
	fRate46() = kactProt*kproteff/(ATP + 5000.0)
	fRate47() = kactProt*kproteff/(ATP + 5000.0)
	fRate48() = kactProt*kproteff/(ATP + 5000.0)
	fRate49() = 0.5*MisP*kagg1*(MisP - 1)
	fRate88() = Source*ksynUCHL1
	fRate90() = kdegProtUCHL1*kproteff
	fRate94() = kdegProtUCHL1*kproteff
	fRate100() = Source*ksynSUB
	fRate139() = kactProt*kproteff/(ATP + 5000.0)
	fRate140() = kactProt*kproteff/(ATP + 5000.0)
	fRate141() = kactProt*kproteff/(ATP + 5000.0)
	fRate142() = kactProt*kproteff/(ATP + 5000.0)
	fRate143() = kactProt*kproteff/(ATP + 5000.0)
	fRate144() = Source*ksynasyn
	fRate146() = kdegasynProt*kproteff
	fRate186() = kactProt*kproteff/(ATP + 5000.0)
	fRate187() = kactProt*kproteff/(ATP + 5000.0)
	fRate188() = kactProt*kproteff/(ATP + 5000.0)
	fRate189() = kactProt*kproteff/(ATP + 5000.0)
	fRate190() = kactProt*kproteff/(ATP + 5000.0)
	fRate191() = 0.5*asyn*kaggasyn1*(asyn - 1)
	fRate213() = 0.5*asyn_dam*kagg1dam*(asyn_dam - 1)
	fRate252() = 0.5*UCHL1_damaged*kagg1dam*(UCHL1_damaged - 1)
	fRate275() = 0.5*SUB_misfolded*kaggSUB1*(SUB_misfolded - 1)
	fRate314() = Source*kgenROS
end functions
begin reaction rules
	UbSynthesis: 0  -> Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) fRate0()
	UbDegradation: Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Proteasome(aggp,asyn,uchl1) -> Proteasome(aggp,asyn,uchl1) fRate1()
	UbUpregulation: MisP(NatP~0,aggp,e3,ub) -> MisP(NatP~0,aggp,e3,ub) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + upregUb() + upregUb() + upregUb() fRate2()
	ProteinSynthesis: 0  -> MisP(NatP~NatP,aggp,e3,ub) fRate3()
	Misfolding: MisP(NatP~NatP,aggp,e3,ub) + ROS() -> MisP(NatP~0,aggp,e3,ub) + ROS() kmisfold
	Refolding: MisP(NatP~0,aggp,e3,ub) -> MisP(NatP~NatP,aggp,e3,ub) krefold
	MisPE3Binding: MisP(NatP~0,aggp,e3,ub) + E3(misp) -> MisP(NatP~0,aggp,e3!512,ub).E3(misp!512) kbinMisPE3
	MisPE3Release: MisP(NatP~0,aggp,e3!512,ub).E3(misp!512) -> MisP(NatP~0,aggp,e3,ub) + E3(misp) krelMisPE3
	E1UbBinding: E1(ub) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + ATP() -> Ub(_2~0,_3~0,_4~0,_5~0,e1!170,e2,misp,uchl1).E1(ub!170) + AMP() fRate8()
	E2UbBinding: E2(ub) + Ub(_2~0,_3~0,_4~0,_5~0,e1!170,e2,misp,uchl1).E1(ub!170) -> Ub(_2~0,_3~0,_4~0,_5~0,e1,e2!171,misp,uchl1).E2(ub!171) + E1(ub) kbinE2Ub
	Monoubiquitination: Ub(_2~0,_3~0,_4~0,_5~0,e1,e2!171,misp,uchl1).E2(ub!171) + MisP(NatP~0,aggp,e3!512,ub).E3(misp!512) -> Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp!524,uchl1).MisP(NatP~0,aggp,e3!512,ub!524).E3(misp!512) + E2(ub) kmonoUb
	Polyubiquitination1: Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp!524,uchl1).MisP(NatP~0,aggp,e3!512,ub!524).E3(misp!512) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2!171,misp,uchl1).E2(ub!171) -> Ub(_2~2,_3~0,_4~0,_5~0,e1,e2,misp!524,uchl1).MisP(NatP~0,aggp,e3!512,ub!524).E3(misp!512) + E2(ub) kpolyUb
	Polyubiquitination2: Ub(_2~2,_3~0,_4~0,_5~0,e1,e2,misp!524,uchl1).MisP(NatP~0,aggp,e3!512,ub!524).E3(misp!512) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2!171,misp,uchl1).E2(ub!171) -> Ub(_2~0,_3~3,_4~0,_5~0,e1,e2,misp!524,uchl1).MisP(NatP~0,aggp,e3!512,ub!524).E3(misp!512) + E2(ub) kpolyUb
	Polyubiquitination3: Ub(_2~0,_3~3,_4~0,_5~0,e1,e2,misp!524,uchl1).MisP(NatP~0,aggp,e3!512,ub!524).E3(misp!512) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2!171,misp,uchl1).E2(ub!171) -> Ub(_2~0,_3~0,_4~4,_5~0,e1,e2,misp!524,uchl1).MisP(NatP~0,aggp,e3!512,ub!524).E3(misp!512) + E2(ub) kpolyUb
	Polyubiquitination4: Ub(_2~0,_3~0,_4~4,_5~0,e1,e2,misp!524,uchl1).MisP(NatP~0,aggp,e3!512,ub!524).E3(misp!512) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2!171,misp,uchl1).E2(ub!171) -> Ub(_2~0,_3~0,_4~0,_5~5,e1,e2,misp!524,uchl1).MisP(NatP~0,aggp,e3!512,ub!524).E3(misp!512) + E2(ub) kpolyUb
	Polyubiquitination5: Ub(_2~0,_3~0,_4~0,_5~5,e1,e2,misp!524,uchl1).MisP(NatP~0,aggp,e3!512,ub!524).E3(misp!512) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2!171,misp,uchl1).E2(ub!171) -> E3_MisP_Ub6() + E2(ub) kpolyUb
	Polyubiquitination6: E3_MisP_Ub6() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2!171,misp,uchl1).E2(ub!171) -> E3_MisP_Ub7() + E2(ub) kpolyUb
	Polyubiquitination7: E3_MisP_Ub7() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2!171,misp,uchl1).E2(ub!171) -> E3_MisP_Ub8() + E2(ub) kpolyUb
	MisPDUBbinding1: Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp!524,uchl1).MisP(NatP~0,aggp,e3!512,ub!524).E3(misp!512) + DUB() -> E3_MisP_Ub_DUB() kbinMisPDUB
	MisPDUBbinding2: Ub(_2~2,_3~0,_4~0,_5~0,e1,e2,misp!524,uchl1).MisP(NatP~0,aggp,e3!512,ub!524).E3(misp!512) + DUB() -> E3_MisP_Ub2_DUB() kbinMisPDUB
	MisPDUBbinding3: Ub(_2~0,_3~3,_4~0,_5~0,e1,e2,misp!524,uchl1).MisP(NatP~0,aggp,e3!512,ub!524).E3(misp!512) + DUB() -> E3_MisP_Ub3_DUB() kbinMisPDUB
	MisPDUBbinding4: Ub(_2~0,_3~0,_4~4,_5~0,e1,e2,misp!524,uchl1).MisP(NatP~0,aggp,e3!512,ub!524).E3(misp!512) + DUB() -> E3_MisP_Ub4_DUB() kbinMisPDUB
	MisPDUBbinding5: Ub(_2~0,_3~0,_4~0,_5~5,e1,e2,misp!524,uchl1).MisP(NatP~0,aggp,e3!512,ub!524).E3(misp!512) + DUB() -> E3_MisP_Ub5_DUB() kbinMisPDUB
	MisPDUBbinding6: E3_MisP_Ub6() + DUB() -> E3_MisP_Ub6_DUB() kbinMisPDUB
	MisPDUBbinding7: E3_MisP_Ub7() + DUB() -> E3_MisP_Ub7_DUB() kbinMisPDUB
	MisPDUBbinding8: E3_MisP_Ub8() + DUB() -> E3_MisP_Ub8_DUB() kbinMisPDUB
	Deubiquitination8: E3_MisP_Ub8_DUB() -> E3_MisP_Ub7_DUB() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) kactDUB
	Deubiquitination7: E3_MisP_Ub7_DUB() -> E3_MisP_Ub6_DUB() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) kactDUB
	Deubiquitination6: E3_MisP_Ub6_DUB() -> E3_MisP_Ub5_DUB() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) kactDUB
	Deubiquitination5: E3_MisP_Ub5_DUB() -> E3_MisP_Ub4_DUB() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) kactDUB
	Deubiquitination4: E3_MisP_Ub4_DUB() -> E3_MisP_Ub3_DUB() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) kactDUB
	Deubiquitination3: E3_MisP_Ub3_DUB() -> E3_MisP_Ub2_DUB() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) kactDUB
	Deubiquitination2: E3_MisP_Ub2_DUB() -> E3_MisP_Ub_DUB() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) kactDUB
	Deubiquitination1: E3_MisP_Ub_DUB() -> MisP(NatP~0,aggp,e3!512,ub).E3(misp!512) + DUB() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) kactDUB
	ProteasomeBindingUb4: Ub(_2~0,_3~0,_4~4,_5~0,e1,e2,misp!524,uchl1).MisP(NatP~0,aggp,e3!512,ub!524).E3(misp!512) + Proteasome(aggp,asyn,uchl1) -> E3(misp) + MisP_Ub4_Proteasome() kbinProt
	ProteasomeBindingUb5: Ub(_2~0,_3~0,_4~0,_5~5,e1,e2,misp!524,uchl1).MisP(NatP~0,aggp,e3!512,ub!524).E3(misp!512) + Proteasome(aggp,asyn,uchl1) -> E3(misp) + MisP_Ub7_Proteasome(_5~5,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~MisP_Ub5_Proteasome,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) kbinProt
	ProteasomeBindingUb6: E3_MisP_Ub6() + Proteasome(aggp,asyn,uchl1) -> E3(misp) + MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~MisP_Ub6_Proteasome,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) kbinProt
	ProteasomeBindingUb7: E3_MisP_Ub7() + Proteasome(aggp,asyn,uchl1) -> E3(misp) + MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) kbinProt
	ProteasomeBindingUb8: E3_MisP_Ub8() + Proteasome(aggp,asyn,uchl1) -> E3(misp) + MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~MisP_Ub8_Proteasome,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) kbinProt
	DeubiquitinationBoundMisP5: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~MisP_Ub8_Proteasome,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + DUB() -> MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + DUB() kactDUBProt
	DeubiquitinationBoundMisP4: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + DUB() -> MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~MisP_Ub6_Proteasome,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + DUB() kactDUBProt
	DeubiquitinationBoundMisP3: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~MisP_Ub6_Proteasome,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + DUB() -> MisP_Ub7_Proteasome(_5~5,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~MisP_Ub5_Proteasome,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + DUB() kactDUBProt
	DeubiquitinationBoundMisP2: MisP_Ub7_Proteasome(_5~5,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~MisP_Ub5_Proteasome,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + DUB() -> MisP_Ub4_Proteasome() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + DUB() kactDUBProt
	DeubiquitinationBoundMisP1: MisP_Ub4_Proteasome() + DUB() -> MisP(NatP~0,aggp,e3,ub) + Proteasome(aggp,asyn,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + DUB() kactDUBProt
	ProteasomeActivity1: MisP_Ub4_Proteasome() + ATP() -> Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Proteasome(aggp,asyn,uchl1) + ADP() fRate44()
	ProteasomeActivity2: MisP_Ub7_Proteasome(_5~5,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~MisP_Ub5_Proteasome,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + ATP() -> Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Proteasome(aggp,asyn,uchl1) + ADP() fRate45()
	ProteasomeActivity3: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~MisP_Ub6_Proteasome,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + ATP() -> Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Proteasome(aggp,asyn,uchl1) + ADP() fRate46()
	ProteasomeActivity4: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + ATP() -> Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Proteasome(aggp,asyn,uchl1) + ADP() fRate47()
	ProteasomeActivity5: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~MisP_Ub8_Proteasome,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + ATP() -> Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Proteasome(aggp,asyn,uchl1) + ADP() fRate48()
	Aggregation1_reactants_0: 0  -> MisP(NatP~0,aggp,e3,ub) -1*2.0*(fRate49())
	Aggregation1_products_0: 0  -> AggP(_1~1,misp,misp,misp,misp,proteasome) fRate49()
	Aggregation2: MisP(NatP~0,aggp,e3,ub) + AggP(_1~1,misp,misp,misp,misp,proteasome) -> AggP(_1~1,misp!493,misp,misp,misp,proteasome).MisP(NatP~0,aggp!493,e3,ub) kagg2
	Aggregation3: MisP(NatP~0,aggp,e3,ub) + AggP(_1~1,misp!493,misp,misp,misp,proteasome).MisP(NatP~0,aggp!493,e3,ub) -> AggP(_1~1,misp!493,misp!494,misp,misp,proteasome).MisP(NatP~0,aggp!493,e3,ub).MisP(NatP~0,aggp!494,e3,ub) kagg2
	Aggregation4: MisP(NatP~0,aggp,e3,ub) + AggP(_1~1,misp!493,misp!494,misp,misp,proteasome).MisP(NatP~0,aggp!493,e3,ub).MisP(NatP~0,aggp!494,e3,ub) -> AggP(_1~1,misp!493,misp!494,misp!495,misp,proteasome).MisP(NatP~0,aggp!493,e3,ub).MisP(NatP~0,aggp!494,e3,ub).MisP(NatP~0,aggp!495,e3,ub) kagg2
	Aggregation5: MisP(NatP~0,aggp,e3,ub) + AggP(_1~1,misp!493,misp!494,misp!495,misp,proteasome).MisP(NatP~0,aggp!493,e3,ub).MisP(NatP~0,aggp!494,e3,ub).MisP(NatP~0,aggp!495,e3,ub) -> AggP(_1~1,misp!493,misp!494,misp!495,misp!496,proteasome).MisP(NatP~0,aggp!493,e3,ub).MisP(NatP~0,aggp!494,e3,ub).MisP(NatP~0,aggp!495,e3,ub).MisP(NatP~0,aggp!496,e3,ub) kagg2
	Disaggregation1: AggP(_1~1,misp!493,misp!494,misp!495,misp!496,proteasome).MisP(NatP~0,aggp!493,e3,ub).MisP(NatP~0,aggp!494,e3,ub).MisP(NatP~0,aggp!495,e3,ub).MisP(NatP~0,aggp!496,e3,ub) -> AggP(_1~1,misp!493,misp!494,misp!495,misp,proteasome).MisP(NatP~0,aggp!493,e3,ub).MisP(NatP~0,aggp!494,e3,ub).MisP(NatP~0,aggp!495,e3,ub) + MisP(NatP~0,aggp,e3,ub) kdisagg5
	Disaggregation2: AggP(_1~1,misp!493,misp!494,misp!495,misp,proteasome).MisP(NatP~0,aggp!493,e3,ub).MisP(NatP~0,aggp!494,e3,ub).MisP(NatP~0,aggp!495,e3,ub) -> AggP(_1~1,misp!493,misp!494,misp,misp,proteasome).MisP(NatP~0,aggp!493,e3,ub).MisP(NatP~0,aggp!494,e3,ub) + MisP(NatP~0,aggp,e3,ub) kdisagg4
	Disaggregation3: AggP(_1~1,misp!493,misp!494,misp,misp,proteasome).MisP(NatP~0,aggp!493,e3,ub).MisP(NatP~0,aggp!494,e3,ub) -> AggP(_1~1,misp!493,misp,misp,misp,proteasome).MisP(NatP~0,aggp!493,e3,ub) + MisP(NatP~0,aggp,e3,ub) kdisagg3
	Disaggregation4: AggP(_1~1,misp!493,misp,misp,misp,proteasome).MisP(NatP~0,aggp!493,e3,ub) -> AggP(_1~1,misp,misp,misp,misp,proteasome) + MisP(NatP~0,aggp,e3,ub) kdisagg2
	Disaggregation5: AggP(_1~1,misp,misp,misp,misp,proteasome) -> MisP(NatP~0,aggp,e3,ub) + MisP(NatP~0,aggp,e3,ub) kdisagg1
	InclusionFormation: MisP(NatP~0,aggp,e3,ub) + AggP(_1~1,misp!493,misp!494,misp!495,misp!496,proteasome).MisP(NatP~0,aggp!493,e3,ub).MisP(NatP~0,aggp!494,e3,ub).MisP(NatP~0,aggp!495,e3,ub).MisP(NatP~0,aggp!496,e3,ub) -> SeqAggP() + aggMisP() + aggMisP() + aggMisP() + aggMisP() + aggMisP() + aggMisP() + aggMisP() kagg2
	InclusionGrowth1: MisP(NatP~0,aggp,e3,ub) + SeqAggP() -> SeqAggP() + SeqAggP() + aggMisP() kigrowth1
	InclusionGrowth2: MisP(NatP~0,aggp,e3!512,ub).E3(misp!512) + SeqAggP() -> SeqAggP() + SeqAggP() + aggMisP() + aggE3() kigrowth2
	InclusionGrowth3: Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp!524,uchl1).MisP(NatP~0,aggp,e3!512,ub!524).E3(misp!512) + SeqAggP() -> SeqAggP() + SeqAggP() + aggMisP() + aggUb() + aggE3() kigrowth2
	InclusionGrowth4: Ub(_2~2,_3~0,_4~0,_5~0,e1,e2,misp!524,uchl1).MisP(NatP~0,aggp,e3!512,ub!524).E3(misp!512) + SeqAggP() -> SeqAggP() + SeqAggP() + aggMisP() + aggUb() + aggUb() + aggE3() kigrowth2
	InclusionGrowth5: Ub(_2~0,_3~3,_4~0,_5~0,e1,e2,misp!524,uchl1).MisP(NatP~0,aggp,e3!512,ub!524).E3(misp!512) + SeqAggP() -> SeqAggP() + SeqAggP() + aggMisP() + aggUb() + aggUb() + aggUb() + aggE3() kigrowth2
	InclusionGrowth6: Ub(_2~0,_3~0,_4~4,_5~0,e1,e2,misp!524,uchl1).MisP(NatP~0,aggp,e3!512,ub!524).E3(misp!512) + SeqAggP() -> SeqAggP() + SeqAggP() + aggMisP() + aggUb() + aggUb() + aggUb() + aggUb() + aggE3() kigrowth2
	InclusionGrowth7: Ub(_2~0,_3~0,_4~0,_5~5,e1,e2,misp!524,uchl1).MisP(NatP~0,aggp,e3!512,ub!524).E3(misp!512) + SeqAggP() -> SeqAggP() + SeqAggP() + aggMisP() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggE3() kigrowth2
	InclusionGrowth8: E3_MisP_Ub6() + SeqAggP() -> SeqAggP() + SeqAggP() + aggMisP() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggE3() kigrowth2
	InclusionGrowth9: E3_MisP_Ub7() + SeqAggP() -> SeqAggP() + SeqAggP() + aggMisP() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggE3() kigrowth2
	InclusionGrowth10: E3_MisP_Ub8() + SeqAggP() -> SeqAggP() + SeqAggP() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggE3() kigrowth2
	InclusionGrowth11: E3_MisP_Ub_DUB() + SeqAggP() -> SeqAggP() + SeqAggP() + aggMisP() + aggUb() + aggE3() + aggDUB() kigrowth2
	InclusionGrowth12: E3_MisP_Ub2_DUB() + SeqAggP() -> SeqAggP() + SeqAggP() + aggMisP() + aggUb() + aggUb() + aggE3() + aggDUB() kigrowth2
	InclusionGrowth13: E3_MisP_Ub3_DUB() + SeqAggP() -> SeqAggP() + SeqAggP() + aggMisP() + aggUb() + aggUb() + aggUb() + aggE3() + aggDUB() kigrowth2
	InclusionGrowth14: E3_MisP_Ub4_DUB() + SeqAggP() -> SeqAggP() + SeqAggP() + aggMisP() + aggUb() + aggUb() + aggUb() + aggUb() + aggE3() + aggDUB() kigrowth2
	InclusionGrowth15: E3_MisP_Ub5_DUB() + SeqAggP() -> SeqAggP() + SeqAggP() + aggMisP() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggE3() + aggDUB() kigrowth2
	InclusionGrowth16: E3_MisP_Ub6_DUB() + SeqAggP() -> SeqAggP() + SeqAggP() + aggMisP() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggE3() + aggDUB() kigrowth2
	InclusionGrowth17: E3_MisP_Ub7_DUB() + SeqAggP() -> SeqAggP() + SeqAggP() + aggMisP() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggE3() + aggDUB() kigrowth2
	InclusionGrowth18: E3_MisP_Ub8_DUB() + SeqAggP() -> SeqAggP() + SeqAggP() + aggMisP() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggE3() + aggDUB() kigrowth2
	ProteasomeInhibition1: AggP(_1~1,misp,misp,misp,misp,proteasome) + Proteasome(aggp,asyn,uchl1) -> AggP(_1~0,misp,misp,misp,misp,proteasome!172).Proteasome(aggp!172,asyn,uchl1) kbinAggProt
	ProteasomeInhibition2: AggP(_1~1,misp!493,misp,misp,misp,proteasome).MisP(NatP~0,aggp!493,e3,ub) + Proteasome(aggp,asyn,uchl1) -> AggP(_1~0,misp,misp,misp,misp,proteasome!172).Proteasome(aggp!172,asyn,uchl1) kbinAggProt
	ProteasomeInhibition3: AggP(_1~1,misp!493,misp!494,misp,misp,proteasome).MisP(NatP~0,aggp!493,e3,ub).MisP(NatP~0,aggp!494,e3,ub) + Proteasome(aggp,asyn,uchl1) -> AggP(_1~0,misp,misp,misp,misp,proteasome!172).Proteasome(aggp!172,asyn,uchl1) kbinAggProt
	ProteasomeInhibition4: AggP(_1~1,misp!493,misp!494,misp!495,misp,proteasome).MisP(NatP~0,aggp!493,e3,ub).MisP(NatP~0,aggp!494,e3,ub).MisP(NatP~0,aggp!495,e3,ub) + Proteasome(aggp,asyn,uchl1) -> AggP(_1~0,misp,misp,misp,misp,proteasome!172).Proteasome(aggp!172,asyn,uchl1) kbinAggProt
	ProteasomeInhibition5: AggP(_1~1,misp!493,misp!494,misp!495,misp!496,proteasome).MisP(NatP~0,aggp!493,e3,ub).MisP(NatP~0,aggp!494,e3,ub).MisP(NatP~0,aggp!495,e3,ub).MisP(NatP~0,aggp!496,e3,ub) + Proteasome(aggp,asyn,uchl1) -> AggP(_1~0,misp,misp,misp,misp,proteasome!172).Proteasome(aggp!172,asyn,uchl1) kbinAggProt
	ROSgenerationSmallAggP1: AggP(_1~1,misp,misp,misp,misp,proteasome) -> AggP(_1~1,misp,misp,misp,misp,proteasome) + ROS() kgenROSAggP
	ROSgenerationSmallAggP2: AggP(_1~1,misp!493,misp,misp,misp,proteasome).MisP(NatP~0,aggp!493,e3,ub) -> AggP(_1~1,misp!493,misp,misp,misp,proteasome).MisP(NatP~0,aggp!493,e3,ub) + ROS() kgenROSAggP
	ROSgenerationSmallAggP3: AggP(_1~1,misp!493,misp!494,misp,misp,proteasome).MisP(NatP~0,aggp!493,e3,ub).MisP(NatP~0,aggp!494,e3,ub) -> AggP(_1~1,misp!493,misp!494,misp,misp,proteasome).MisP(NatP~0,aggp!493,e3,ub).MisP(NatP~0,aggp!494,e3,ub) + ROS() kgenROSAggP
	ROSgenerationSmallAggP4: AggP(_1~1,misp!493,misp!494,misp!495,misp,proteasome).MisP(NatP~0,aggp!493,e3,ub).MisP(NatP~0,aggp!494,e3,ub).MisP(NatP~0,aggp!495,e3,ub) -> AggP(_1~1,misp!493,misp!494,misp!495,misp,proteasome).MisP(NatP~0,aggp!493,e3,ub).MisP(NatP~0,aggp!494,e3,ub).MisP(NatP~0,aggp!495,e3,ub) + ROS() kgenROSAggP
	ROSgenerationSmallAggP5: AggP(_1~1,misp!493,misp!494,misp!495,misp!496,proteasome).MisP(NatP~0,aggp!493,e3,ub).MisP(NatP~0,aggp!494,e3,ub).MisP(NatP~0,aggp!495,e3,ub).MisP(NatP~0,aggp!496,e3,ub) -> AggP(_1~1,misp!493,misp!494,misp!495,misp!496,proteasome).MisP(NatP~0,aggp!493,e3,ub).MisP(NatP~0,aggp!494,e3,ub).MisP(NatP~0,aggp!495,e3,ub).MisP(NatP~0,aggp!496,e3,ub) + ROS() kgenROSAggP
	UCHL1Synthesis: 0  -> UCHL1(_damaged~0,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) fRate88()
	UCHL1ProteasomeBinding: UCHL1(_damaged~0,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) + Proteasome(aggp,asyn,uchl1) -> UCHL1(_damaged~0,lamp2a,proteasome!516,ub,uchl1,uchl1,uchl1,uchl1,uchl1).Proteasome(aggp,asyn,uchl1!516) kbinUCHL1Prot
	UCHL1ProteasomeDegradation: UCHL1(_damaged~0,lamp2a,proteasome!516,ub,uchl1,uchl1,uchl1,uchl1,uchl1).Proteasome(aggp,asyn,uchl1!516) -> Proteasome(aggp,asyn,uchl1) fRate90()
	UCHL1LysosomalDegradation: UCHL1(_damaged~0,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) + Lysosome() -> Lysosome() kdegLysUCHL1
	UCHL1damage: UCHL1(_damaged~0,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) + ROS() -> UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) + ROS() kdamUCHL1
	UCHL1DamgedProteasomeBinding: UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) + Proteasome(aggp,asyn,uchl1) -> UCHL1(_damaged~_DAMAGED,lamp2a,proteasome!516,ub,uchl1,uchl1,uchl1,uchl1,uchl1).Proteasome(aggp,asyn,uchl1!516) kbinUCHL1Prot
	UCHL1DamagedProteasomeDegradation: UCHL1(_damaged~_DAMAGED,lamp2a,proteasome!516,ub,uchl1,uchl1,uchl1,uchl1,uchl1).Proteasome(aggp,asyn,uchl1!516) -> Proteasome(aggp,asyn,uchl1) fRate94()
	UCHL1DamagedLysosomalDegradation: UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) + Lysosome() -> Lysosome() kdegLysUCHL1dam
	UCHL1Lamp2abinding: UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) + Lamp2a(asyn,uchl1) -> UCHL1(_damaged~_DAMAGED,lamp2a!519,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1).Lamp2a(asyn,uchl1!519) kbinLamp2aUCHL1dam
	UCHL1Lamp2aRelease: UCHL1(_damaged~_DAMAGED,lamp2a!519,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1).Lamp2a(asyn,uchl1!519) -> UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) + Lamp2a(asyn,uchl1) krelLamp2aUCHL1dam
	UbUCHL1binding: Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + UCHL1(_damaged~0,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) -> UCHL1(_damaged~0,lamp2a,proteasome,ub!513,uchl1,uchl1,uchl1,uchl1,uchl1).Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1!513) kbinUbUCHL1
	UbUCHL1release: UCHL1(_damaged~0,lamp2a,proteasome,ub!513,uchl1,uchl1,uchl1,uchl1,uchl1).Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1!513) -> Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + UCHL1(_damaged~0,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) krelUbUCHL1
	SUBsynthesis: 0  -> SUB(_misfolded~0,e3sub,sub,sub,sub,sub,sub) fRate100()
	SUBmisfolding: SUB(_misfolded~0,e3sub,sub,sub,sub,sub,sub) + ROS() -> SUB(_misfolded~_MISFOLDED,e3sub,sub,sub,sub,sub,sub) + ROS() kmisfoldSUB
	SUBRefolding: SUB(_misfolded~_MISFOLDED,e3sub,sub,sub,sub,sub,sub) -> SUB(_misfolded~0,e3sub,sub,sub,sub,sub,sub) krefoldSUB
	E3SUBBinding: SUB(_misfolded~_MISFOLDED,e3sub,sub,sub,sub,sub,sub) + E3SUB(sub) -> SUB(_misfolded~_MISFOLDED,e3sub!518,sub,sub,sub,sub,sub).E3SUB(sub!518) kbinE3SUB
	E3SUBRelease: SUB(_misfolded~_MISFOLDED,e3sub!518,sub,sub,sub,sub,sub).E3SUB(sub!518) -> SUB(_misfolded~_MISFOLDED,e3sub,sub,sub,sub,sub,sub) + E3SUB(sub) krelE3SUB
	SUBMonoubiquitination: Ub(_2~0,_3~0,_4~0,_5~0,e1,e2!171,misp,uchl1).E2(ub!171) + SUB(_misfolded~_MISFOLDED,e3sub!518,sub,sub,sub,sub,sub).E3SUB(sub!518) -> E3SUB_SUB_misfolded_Ub() + E2(ub) kmonoUb
	SUBPolyubiquitination1: E3SUB_SUB_misfolded_Ub() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2!171,misp,uchl1).E2(ub!171) -> E3SUB_SUB_misfolded_Ub2() + E2(ub) kpolyUb
	SUBPolyubiquitination2: E3SUB_SUB_misfolded_Ub2() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2!171,misp,uchl1).E2(ub!171) -> E3SUB_SUB_misfolded_Ub3() + E2(ub) kpolyUb
	SUBPolyubiquitination3: E3SUB_SUB_misfolded_Ub3() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2!171,misp,uchl1).E2(ub!171) -> E3SUB_SUB_misfolded_Ub4() + E2(ub) kpolyUb
	SUBPolyubiquitination4: E3SUB_SUB_misfolded_Ub4() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2!171,misp,uchl1).E2(ub!171) -> E3SUB_SUB_misfolded_Ub5() + E2(ub) kpolyUb
	SUBPolyubiquitination5: E3SUB_SUB_misfolded_Ub5() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2!171,misp,uchl1).E2(ub!171) -> E3SUB_SUB_misfolded_Ub6() + E2(ub) kpolyUb
	SUBPolyubiquitination6: E3SUB_SUB_misfolded_Ub6() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2!171,misp,uchl1).E2(ub!171) -> MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~E3SUB_SUB_misfolded_Ub7,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + E2(ub) kpolyUb
	SUBPolyubiquitination7: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~E3SUB_SUB_misfolded_Ub7,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2!171,misp,uchl1).E2(ub!171) -> MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~E3SUB_SUB_misfolded_Ub8,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + E2(ub) kpolyUb
	SUBUCHL1binding1: E3SUB_SUB_misfolded_Ub() + UCHL1(_damaged~0,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) -> E3SUB_SUB_misfolded_Ub_UCHL1() kbinSUBUCHL1
	SUBUCHL1binding2: E3SUB_SUB_misfolded_Ub2() + UCHL1(_damaged~0,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) -> E3SUB_SUB_misfolded_Ub2_UCHL1() kbinSUBUCHL1
	SUBUCHL1binding3: E3SUB_SUB_misfolded_Ub3() + UCHL1(_damaged~0,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) -> E3SUB_SUB_misfolded_Ub3_UCHL1() kbinSUBUCHL1
	SUBUCHL1binding4: E3SUB_SUB_misfolded_Ub4() + UCHL1(_damaged~0,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) -> E3SUB_SUB_misfolded_Ub4_UCHL1() kbinSUBUCHL1
	SUBUCHL1binding5Ub_UCHL1: E3SUB_SUB_misfolded_Ub5() + UCHL1(_damaged~0,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) -> E3SUB_SUB_misfolded_Ub5_UCHL1() kbinSUBUCHL1
	SUBUCHL1binding6: E3SUB_SUB_misfolded_Ub6() + UCHL1(_damaged~0,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) -> E3SUB_SUB_misfolded_Ub6_UCHL1() kbinSUBUCHL1
	SUBUCHL1binding7: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~E3SUB_SUB_misfolded_Ub7,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + UCHL1(_damaged~0,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) -> E3SUB_SUB_misfolded_Ub7_UCHL1() kbinSUBUCHL1
	SUBUCHL1binding8: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~E3SUB_SUB_misfolded_Ub8,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + UCHL1(_damaged~0,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) -> E3SUB_SUB_misfolded_Ub8_UCHL1() kbinSUBUCHL1
	SUBDeubiquitination8: E3SUB_SUB_misfolded_Ub8_UCHL1() -> E3SUB_SUB_misfolded_Ub7_UCHL1() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) kactUchl1
	SUBDeubiquitination7: E3SUB_SUB_misfolded_Ub7_UCHL1() -> E3SUB_SUB_misfolded_Ub6_UCHL1() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) kactUchl1
	SUBDeubiquitination6: E3SUB_SUB_misfolded_Ub6_UCHL1() -> E3SUB_SUB_misfolded_Ub5_UCHL1() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) kactUchl1
	SUBDeubiquitination5: E3SUB_SUB_misfolded_Ub5_UCHL1() -> E3SUB_SUB_misfolded_Ub4_UCHL1() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) kactUchl1
	SUBDeubiquitination4: E3SUB_SUB_misfolded_Ub4_UCHL1() -> E3SUB_SUB_misfolded_Ub3_UCHL1() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) kactUchl1
	SUBDeubiquitination3: E3SUB_SUB_misfolded_Ub3_UCHL1() -> E3SUB_SUB_misfolded_Ub2_UCHL1() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) kactUchl1
	SUBDeubiquitination2: E3SUB_SUB_misfolded_Ub2_UCHL1() -> E3SUB_SUB_misfolded_Ub_UCHL1() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) kactUchl1
	SUBDeubiquitination1: E3SUB_SUB_misfolded_Ub_UCHL1() -> SUB(_misfolded~_MISFOLDED,e3sub!518,sub,sub,sub,sub,sub).E3SUB(sub!518) + UCHL1(_damaged~0,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) kactUchl1
	SUBProteasomeBindingUb4: E3SUB_SUB_misfolded_Ub4() + Proteasome(aggp,asyn,uchl1) -> MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~SUB_misfolded_Ub4_Proteasome,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + E3SUB(sub) kbinProt
	SUBProteasomeBindingUb5: E3SUB_SUB_misfolded_Ub5() + Proteasome(aggp,asyn,uchl1) -> MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~SUB_misfolded_Ub5_Proteasome,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + E3SUB(sub) kbinProt
	SUBProteasomeBindingUb6: E3SUB_SUB_misfolded_Ub6() + Proteasome(aggp,asyn,uchl1) -> MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~SUB_misfolded_Ub6_Proteasome,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + E3SUB(sub) kbinProt
	SUBProteasomeBindingUb7: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~E3SUB_SUB_misfolded_Ub7,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + Proteasome(aggp,asyn,uchl1) -> MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~SUB_misfolded_Ub7_Proteasome,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + E3SUB(sub) kbinProt
	SUBProteasomeBindingUb8: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~E3SUB_SUB_misfolded_Ub8,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + Proteasome(aggp,asyn,uchl1) -> MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~SUB_misfolded_Ub8_Proteasome,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + E3SUB(sub) kbinProt
	DeubiquitinationBoundSUB8: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~SUB_misfolded_Ub8_Proteasome,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + DUB() -> MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~SUB_misfolded_Ub7_Proteasome,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + DUB() kactDUBProt
	DeubiquitinationBoundSUB7: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~SUB_misfolded_Ub7_Proteasome,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + DUB() -> MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~SUB_misfolded_Ub6_Proteasome,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + DUB() kactDUBProt
	DeubiquitinationBoundSUB6: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~SUB_misfolded_Ub6_Proteasome,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + DUB() -> MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~SUB_misfolded_Ub5_Proteasome,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + DUB() kactDUBProt
	DeubiquitinationBoundSUB5: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~SUB_misfolded_Ub5_Proteasome,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + DUB() -> MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~SUB_misfolded_Ub4_Proteasome,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + DUB() kactDUBProt
	DeubiquitinationBoundSUB4: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~SUB_misfolded_Ub4_Proteasome,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + DUB() -> SUB(_misfolded~_MISFOLDED,e3sub,sub,sub,sub,sub,sub) + Proteasome(aggp,asyn,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + DUB() kactDUBProt
	SUBDegradationUb4: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~SUB_misfolded_Ub4_Proteasome,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + ATP() -> Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Proteasome(aggp,asyn,uchl1) + ADP() fRate139()
	SUBDegradationUb5: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~SUB_misfolded_Ub5_Proteasome,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + ATP() -> Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Proteasome(aggp,asyn,uchl1) + ADP() fRate140()
	SUBDegradationUb6: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~SUB_misfolded_Ub6_Proteasome,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + ATP() -> Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Proteasome(aggp,asyn,uchl1) + ADP() fRate141()
	SUBDegradationUb7: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~SUB_misfolded_Ub7_Proteasome,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + ATP() -> Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Proteasome(aggp,asyn,uchl1) + ADP() fRate142()
	SUBDegradationUb8: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~SUB_misfolded_Ub8_Proteasome,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + ATP() -> Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Proteasome(aggp,asyn,uchl1) + ADP() fRate143()
	asynSynthesis1: 0  -> asyn(_dam~0,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) fRate144()
	asynProt20Sbinding: asyn(_dam~0,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) + Proteasome(aggp,asyn,uchl1) -> asyn(_dam~0,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome!515).Proteasome(aggp,asyn!515,uchl1) kbinasynProt
	asynProt20Sdegradation: asyn(_dam~0,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome!515).Proteasome(aggp,asyn!515,uchl1) -> Proteasome(aggp,asyn,uchl1) fRate146()
	asynLamp2aBinding: asyn(_dam~0,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) + Lamp2a(asyn,uchl1) -> asyn(_dam~0,asyn,asyn,asyn,asyn,asyn,lamp2a!514,parkin,proteasome).Lamp2a(asyn!514,uchl1) kbinasynLamp2a
	asynCMAdegradation: asyn(_dam~0,asyn,asyn,asyn,asyn,asyn,lamp2a!514,parkin,proteasome).Lamp2a(asyn!514,uchl1) -> Lamp2a(asyn,uchl1) kCMAasyn
	asynDamage: asyn(_dam~0,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) + ROS() -> asyn(_dam~_DAM,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) + ROS() kdamasyn
	asyn_damParkinBinding: asyn(_dam~_DAM,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) + Parkin(asyn) -> asyn(_dam~_DAM,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin!517,proteasome).Parkin(asyn!517) kbinasynParkin
	asyn_damParkinRelease: asyn(_dam~_DAM,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin!517,proteasome).Parkin(asyn!517) -> asyn(_dam~_DAM,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) + Parkin(asyn) krelasynParkin
	AsynMonoubiquitination: Ub(_2~0,_3~0,_4~0,_5~0,e1,e2!171,misp,uchl1).E2(ub!171) + asyn(_dam~_DAM,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin!517,proteasome).Parkin(asyn!517) -> Parkin_asyn_dam_Ub() + E2(ub) kmonoUb
	AsynPolyubiquitination1: Parkin_asyn_dam_Ub() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2!171,misp,uchl1).E2(ub!171) -> Parkin_asyn_dam_Ub2() + E2(ub) kpolyUb
	AsynPolyubiquitination2: Parkin_asyn_dam_Ub2() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2!171,misp,uchl1).E2(ub!171) -> Parkin_asyn_dam_Ub3() + E2(ub) kpolyUb
	AsynPolyubiquitination3: Parkin_asyn_dam_Ub3() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2!171,misp,uchl1).E2(ub!171) -> Parkin_asyn_dam_Ub4() + E2(ub) kpolyUb
	AsynPolyubiquitination4: Parkin_asyn_dam_Ub4() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2!171,misp,uchl1).E2(ub!171) -> Parkin_asyn_dam_Ub5() + E2(ub) kpolyUb
	AsynPolyubiquitination5: Parkin_asyn_dam_Ub5() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2!171,misp,uchl1).E2(ub!171) -> MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~Parkin_asyn_dam_Ub6,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + E2(ub) kpolyUb
	AsynPolyubiquitination6: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~Parkin_asyn_dam_Ub6,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2!171,misp,uchl1).E2(ub!171) -> MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~Parkin_asyn_dam_Ub7,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + E2(ub) kpolyUb
	AsynPolyubiquitination7: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~Parkin_asyn_dam_Ub7,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2!171,misp,uchl1).E2(ub!171) -> MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~Parkin_asyn_dam_Ub8,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + E2(ub) kpolyUb
	AsynDUBbindingUb8: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~Parkin_asyn_dam_Ub8,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + DUB() -> Parkin_asyn_dam_Ub8_DUB() kbinasynDUB
	AsynDUBbindingUb7: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~Parkin_asyn_dam_Ub7,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + DUB() -> Parkin_asyn_dam_Ub7_DUB() kbinasynDUB
	AsynDUBbindingUb6: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~Parkin_asyn_dam_Ub6,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + DUB() -> Parkin_asyn_dam_Ub6_DUB() kbinasynDUB
	AsynDUBbindingUb5: Parkin_asyn_dam_Ub5() + DUB() -> Parkin_asyn_dam_Ub5_DUB() kbinasynDUB
	AsynDUBbindingUb4: Parkin_asyn_dam_Ub4() + DUB() -> Parkin_asyn_dam_Ub4_DUB() kbinasynDUB
	AsynDUBbindingUb3: Parkin_asyn_dam_Ub3() + DUB() -> Parkin_asyn_dam_Ub3_DUB() kbinasynDUB
	AsynDUBbindingUb2: Parkin_asyn_dam_Ub2() + DUB() -> Parkin_asyn_dam_Ub2_DUB() kbinasynDUB
	AsynDUBbindingUb1: Parkin_asyn_dam_Ub() + DUB() -> Parkin_asyn_dam_Ub_DUB() kbinasynDUB
	AsynDeubiquitinationUb8: Parkin_asyn_dam_Ub8_DUB() -> Parkin_asyn_dam_Ub7_DUB() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) kactDUB
	AsynDeubiquitinationUb7: Parkin_asyn_dam_Ub7_DUB() -> Parkin_asyn_dam_Ub6_DUB() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) kactDUB
	AsynDeubiquitinationUb6: Parkin_asyn_dam_Ub6_DUB() -> Parkin_asyn_dam_Ub5_DUB() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) kactDUB
	AsynDeubiquitinationUb5: Parkin_asyn_dam_Ub5_DUB() -> Parkin_asyn_dam_Ub4_DUB() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) kactDUB
	AsynDeubiquitinationUb4: Parkin_asyn_dam_Ub4_DUB() -> Parkin_asyn_dam_Ub3_DUB() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) kactDUB
	AsynDeubiquitinationUb3: Parkin_asyn_dam_Ub3_DUB() -> Parkin_asyn_dam_Ub2_DUB() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) kactDUB
	AsynDeubiquitinationUb2: Parkin_asyn_dam_Ub2_DUB() -> Parkin_asyn_dam_Ub_DUB() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) kactDUB
	AsynDeubiquitinationUb1: Parkin_asyn_dam_Ub_DUB() -> asyn(_dam~_DAM,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin!517,proteasome).Parkin(asyn!517) + DUB() + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) kactDUB
	AsynProteasomeBindingUb4: Parkin_asyn_dam_Ub4() + Proteasome(aggp,asyn,uchl1) -> MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~asyn_dam_Ub4_Proteasome,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + Parkin(asyn) kbinProt
	AsynProteasomeBindingUb5: Parkin_asyn_dam_Ub5() + Proteasome(aggp,asyn,uchl1) -> MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~asyn_dam_Ub5_Proteasome,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + Parkin(asyn) kbinProt
	AsynProteasomeBindingUb6: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~Parkin_asyn_dam_Ub6,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + Proteasome(aggp,asyn,uchl1) -> MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~asyn_dam_Ub6_Proteasome,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + Parkin(asyn) kbinProt
	AsynProteasomeBindingUb7: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~Parkin_asyn_dam_Ub7,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + Proteasome(aggp,asyn,uchl1) -> MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~asyn_dam_Ub7_Proteasome,asyn_dam_Ub8_Proteasome~0) + Parkin(asyn) kbinProt
	AsynProteasomeBindingUb8: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~Parkin_asyn_dam_Ub8,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + Proteasome(aggp,asyn,uchl1) -> MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~asyn_dam_Ub8_Proteasome) + Parkin(asyn) kbinProt
	DeubiquitinationBoundasyn_damUb8: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~asyn_dam_Ub8_Proteasome) + DUB() -> MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~asyn_dam_Ub7_Proteasome,asyn_dam_Ub8_Proteasome~0) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + DUB() kactDUBProt
	DeubiquitinationBoundasynDamUb7: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~asyn_dam_Ub7_Proteasome,asyn_dam_Ub8_Proteasome~0) + DUB() -> MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~asyn_dam_Ub6_Proteasome,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + DUB() kactDUBProt
	DeubiquitinationBoundasynDamUb6: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~asyn_dam_Ub6_Proteasome,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + DUB() -> MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~asyn_dam_Ub5_Proteasome,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + DUB() kactDUBProt
	DeubiquitinationBoundasynDamUb5: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~asyn_dam_Ub5_Proteasome,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + DUB() -> MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~asyn_dam_Ub4_Proteasome,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + DUB() kactDUBProt
	DeubiquitinationBoundasynDamUb4: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~asyn_dam_Ub4_Proteasome,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + DUB() -> asyn(_dam~_DAM,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) + Proteasome(aggp,asyn,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + DUB() kactDUBProt
	AsynProteasomeActivityUb4: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~asyn_dam_Ub4_Proteasome,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + ATP() -> Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Proteasome(aggp,asyn,uchl1) + ADP() fRate186()
	AsynDegradationUb5: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~asyn_dam_Ub5_Proteasome,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + ATP() -> Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Proteasome(aggp,asyn,uchl1) + ADP() fRate187()
	AsynDegradationUb6: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~asyn_dam_Ub6_Proteasome,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + ATP() -> Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Proteasome(aggp,asyn,uchl1) + ADP() fRate188()
	AsynDegradationUb7: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~asyn_dam_Ub7_Proteasome,asyn_dam_Ub8_Proteasome~0) + ATP() -> Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Proteasome(aggp,asyn,uchl1) + ADP() fRate189()
	AsynDegradationUb8: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~asyn_dam_Ub8_Proteasome) + ATP() -> Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Ub(_2~0,_3~0,_4~0,_5~0,e1,e2,misp,uchl1) + Proteasome(aggp,asyn,uchl1) + ADP() fRate190()
	Aggregationasyn1_reactants_0: 0  -> asyn(_dam~0,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) -1*2.0*(fRate191())
	Aggregationasyn1_products_0: 0  -> asyn(_dam~0,asyn!511,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) fRate191()
	Aggregationasyn2: asyn(_dam~0,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) + asyn(_dam~0,asyn!511,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) -> asyn(_dam~0,asyn!511,asyn!523,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn!522,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!522,asyn!523,asyn,asyn,asyn,lamp2a,parkin,proteasome) kaggasyn2
	Aggregationasyn3: asyn(_dam~0,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) + asyn(_dam~0,asyn!511,asyn!523,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn!522,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!522,asyn!523,asyn,asyn,asyn,lamp2a,parkin,proteasome) -> asyn(_dam~0,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!522,asyn!523,asyn!527,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!525,asyn!526,asyn!527,asyn,asyn,lamp2a,parkin,proteasome) kaggasyn2
	Aggregationasyn4: asyn(_dam~0,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) + asyn(_dam~0,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!522,asyn!523,asyn!527,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!525,asyn!526,asyn!527,asyn,asyn,lamp2a,parkin,proteasome) -> asyn(_dam~0,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!522,asyn!523,asyn!527,asyn!538,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!525,asyn!526,asyn!527,asyn!539,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!538,asyn!539,asyn,asyn,asyn,lamp2a,parkin,proteasome) kaggasyn2
	Aggregationasyn5: asyn(_dam~0,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) + asyn(_dam~0,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!522,asyn!523,asyn!527,asyn!538,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!525,asyn!526,asyn!527,asyn!539,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!538,asyn!539,asyn,asyn,asyn,lamp2a,parkin,proteasome) -> asyn(_dam~0,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!522,asyn!523,asyn!527,asyn!538,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!525,asyn!526,asyn!527,asyn!539,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!538,asyn!539,asyn!540,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!540,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) kaggasyn2
	DisAggregationasyn1: asyn(_dam~0,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!522,asyn!523,asyn!527,asyn!538,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!525,asyn!526,asyn!527,asyn!539,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!538,asyn!539,asyn!540,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!540,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) -> asyn(_dam~0,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!522,asyn!523,asyn!527,asyn!538,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!525,asyn!526,asyn!527,asyn!539,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!538,asyn!539,asyn,asyn,asyn,lamp2a,parkin,proteasome) + asyn(_dam~0,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) kdisaggasyn5
	DisAggregationasyn2: asyn(_dam~0,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!522,asyn!523,asyn!527,asyn!538,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!525,asyn!526,asyn!527,asyn!539,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!538,asyn!539,asyn,asyn,asyn,lamp2a,parkin,proteasome) -> asyn(_dam~0,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!522,asyn!523,asyn!527,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!525,asyn!526,asyn!527,asyn,asyn,lamp2a,parkin,proteasome) + asyn(_dam~0,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) kdisaggasyn4
	DisAggregationasyn3: asyn(_dam~0,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!522,asyn!523,asyn!527,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!525,asyn!526,asyn!527,asyn,asyn,lamp2a,parkin,proteasome) -> asyn(_dam~0,asyn!511,asyn!523,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn!522,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!522,asyn!523,asyn,asyn,asyn,lamp2a,parkin,proteasome) + asyn(_dam~0,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) kdisaggasyn3
	DisAggregationasyn4: asyn(_dam~0,asyn!511,asyn!523,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn!522,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!522,asyn!523,asyn,asyn,asyn,lamp2a,parkin,proteasome) -> asyn(_dam~0,asyn!511,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) + asyn(_dam~0,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) kdisaggasyn2
	DisAggregationasyn5: asyn(_dam~0,asyn!511,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) -> asyn(_dam~0,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) + asyn(_dam~0,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) kdisaggasyn1
	AggA1ProteasomeInhibition: asyn(_dam~0,asyn!511,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) + Proteasome(aggp,asyn,uchl1) -> AggP(_1~0,misp,misp,misp,misp,proteasome!172).Proteasome(aggp!172,asyn,uchl1) kbinAggProt
	AggA2ProteasomeInhibition: asyn(_dam~0,asyn!511,asyn!523,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn!522,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!522,asyn!523,asyn,asyn,asyn,lamp2a,parkin,proteasome) + Proteasome(aggp,asyn,uchl1) -> AggP(_1~0,misp,misp,misp,misp,proteasome!172).Proteasome(aggp!172,asyn,uchl1) kbinAggProt
	AggA3ProteasomeInhibition: asyn(_dam~0,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!522,asyn!523,asyn!527,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!525,asyn!526,asyn!527,asyn,asyn,lamp2a,parkin,proteasome) + Proteasome(aggp,asyn,uchl1) -> AggP(_1~0,misp,misp,misp,misp,proteasome!172).Proteasome(aggp!172,asyn,uchl1) kbinAggProt
	AggA4ProteasomeInhibition: asyn(_dam~0,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!522,asyn!523,asyn!527,asyn!538,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!525,asyn!526,asyn!527,asyn!539,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!538,asyn!539,asyn,asyn,asyn,lamp2a,parkin,proteasome) + Proteasome(aggp,asyn,uchl1) -> AggP(_1~0,misp,misp,misp,misp,proteasome!172).Proteasome(aggp!172,asyn,uchl1) kbinAggProt
	AggA5ProteasomeInhibition: asyn(_dam~0,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!522,asyn!523,asyn!527,asyn!538,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!525,asyn!526,asyn!527,asyn!539,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!538,asyn!539,asyn!540,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!540,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) + Proteasome(aggp,asyn,uchl1) -> AggP(_1~0,misp,misp,misp,misp,proteasome!172).Proteasome(aggp!172,asyn,uchl1) kbinAggProt
	AsynInclusionFormation: asyn(_dam~0,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) + asyn(_dam~0,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!522,asyn!523,asyn!527,asyn!538,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!525,asyn!526,asyn!527,asyn!539,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!538,asyn!539,asyn!540,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!540,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) -> SeqAggP() + aggasyn() + aggasyn() + aggasyn() + aggasyn() + aggasyn() + aggasyn() + aggasyn() kaggasyn2
	AsynInclusionGrowth: SeqAggP() + asyn(_dam~0,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) -> SeqAggP() + SeqAggP() + aggasyn() kigrowth1
	ROSgenerationSmallAggA1: asyn(_dam~0,asyn!511,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) -> asyn(_dam~0,asyn!511,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) + ROS() kgenROSAggP
	ROSgenerationSmallAggA2: asyn(_dam~0,asyn!511,asyn!523,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn!522,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!522,asyn!523,asyn,asyn,asyn,lamp2a,parkin,proteasome) -> asyn(_dam~0,asyn!511,asyn!523,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn!522,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!522,asyn!523,asyn,asyn,asyn,lamp2a,parkin,proteasome) + ROS() kgenROSAggP
	ROSgenerationSmallAggA3: asyn(_dam~0,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!522,asyn!523,asyn!527,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!525,asyn!526,asyn!527,asyn,asyn,lamp2a,parkin,proteasome) -> asyn(_dam~0,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!522,asyn!523,asyn!527,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!525,asyn!526,asyn!527,asyn,asyn,lamp2a,parkin,proteasome) + ROS() kgenROSAggP
	ROSgenerationSmallAggA4: asyn(_dam~0,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!522,asyn!523,asyn!527,asyn!538,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!525,asyn!526,asyn!527,asyn!539,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!538,asyn!539,asyn,asyn,asyn,lamp2a,parkin,proteasome) -> asyn(_dam~0,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!522,asyn!523,asyn!527,asyn!538,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!525,asyn!526,asyn!527,asyn!539,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!538,asyn!539,asyn,asyn,asyn,lamp2a,parkin,proteasome) + ROS() kgenROSAggP
	ROSgenerationSmallAggA5: asyn(_dam~0,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!522,asyn!523,asyn!527,asyn!538,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!525,asyn!526,asyn!527,asyn!539,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!538,asyn!539,asyn!540,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!540,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) -> asyn(_dam~0,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!522,asyn!523,asyn!527,asyn!538,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!525,asyn!526,asyn!527,asyn!539,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!538,asyn!539,asyn!540,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~0,asyn!540,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) + ROS() kgenROSAggP
	AggregationAsynDam1_reactants_0: 0  -> asyn(_dam~_DAM,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) -1*2.0*(fRate213())
	AggregationAsynDam1_products_0: 0  -> asyn(_dam~_DAM,asyn!511,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) fRate213()
	AggregationAsynDam2: asyn(_dam~_DAM,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) + asyn(_dam~_DAM,asyn!511,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) -> asyn(_dam~_DAM,asyn!511,asyn!523,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn!522,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!522,asyn!523,asyn,asyn,asyn,lamp2a,parkin,proteasome) kagg2dam
	AggregationAsynDam3: asyn(_dam~_DAM,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) + asyn(_dam~_DAM,asyn!511,asyn!523,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn!522,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!522,asyn!523,asyn,asyn,asyn,lamp2a,parkin,proteasome) -> asyn(_dam~_DAM,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!522,asyn!523,asyn!527,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!525,asyn!526,asyn!527,asyn,asyn,lamp2a,parkin,proteasome) kagg2dam
	AggregationAsynDam4: asyn(_dam~_DAM,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) + asyn(_dam~_DAM,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!522,asyn!523,asyn!527,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!525,asyn!526,asyn!527,asyn,asyn,lamp2a,parkin,proteasome) -> asyn(_dam~_DAM,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!522,asyn!523,asyn!527,asyn!538,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!525,asyn!526,asyn!527,asyn!539,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!538,asyn!539,asyn,asyn,asyn,lamp2a,parkin,proteasome) kagg2dam
	AggregationAsynDam5: asyn(_dam~_DAM,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) + asyn(_dam~_DAM,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!522,asyn!523,asyn!527,asyn!538,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!525,asyn!526,asyn!527,asyn!539,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!538,asyn!539,asyn,asyn,asyn,lamp2a,parkin,proteasome) -> asyn(_dam~_DAM,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!522,asyn!523,asyn!527,asyn!538,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!525,asyn!526,asyn!527,asyn!539,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!538,asyn!539,asyn!540,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!540,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) kagg2dam
	DisaggregationAsynDam1: asyn(_dam~_DAM,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!522,asyn!523,asyn!527,asyn!538,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!525,asyn!526,asyn!527,asyn!539,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!538,asyn!539,asyn!540,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!540,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) -> asyn(_dam~_DAM,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!522,asyn!523,asyn!527,asyn!538,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!525,asyn!526,asyn!527,asyn!539,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!538,asyn!539,asyn,asyn,asyn,lamp2a,parkin,proteasome) + asyn(_dam~_DAM,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) kdisaggasyndam5
	DisaggregationAsynDam2: asyn(_dam~_DAM,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!522,asyn!523,asyn!527,asyn!538,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!525,asyn!526,asyn!527,asyn!539,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!538,asyn!539,asyn,asyn,asyn,lamp2a,parkin,proteasome) -> asyn(_dam~_DAM,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!522,asyn!523,asyn!527,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!525,asyn!526,asyn!527,asyn,asyn,lamp2a,parkin,proteasome) + asyn(_dam~_DAM,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) kdisaggasyndam4
	DisaggregationAsynDam3: asyn(_dam~_DAM,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!522,asyn!523,asyn!527,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!525,asyn!526,asyn!527,asyn,asyn,lamp2a,parkin,proteasome) -> asyn(_dam~_DAM,asyn!511,asyn!523,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn!522,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!522,asyn!523,asyn,asyn,asyn,lamp2a,parkin,proteasome) + asyn(_dam~_DAM,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) kdisaggasyndam3
	DisaggregationAsynDam4: asyn(_dam~_DAM,asyn!511,asyn!523,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn!522,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!522,asyn!523,asyn,asyn,asyn,lamp2a,parkin,proteasome) -> asyn(_dam~_DAM,asyn!511,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) + asyn(_dam~_DAM,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) kdisaggasyndam2
	DisaggregationAsynDam5: asyn(_dam~_DAM,asyn!511,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) -> asyn(_dam~_DAM,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) + asyn(_dam~_DAM,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) kdisaggasyndam1
	AggD1ProteasomeInhibition: asyn(_dam~_DAM,asyn!511,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) + Proteasome(aggp,asyn,uchl1) -> AggP(_1~0,misp,misp,misp,misp,proteasome!172).Proteasome(aggp!172,asyn,uchl1) kbinAggProt
	AggD2ProteasomeInhibition: asyn(_dam~_DAM,asyn!511,asyn!523,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn!522,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!522,asyn!523,asyn,asyn,asyn,lamp2a,parkin,proteasome) + Proteasome(aggp,asyn,uchl1) -> AggP(_1~0,misp,misp,misp,misp,proteasome!172).Proteasome(aggp!172,asyn,uchl1) kbinAggProt
	AggD3ProteasomeInhibition: asyn(_dam~_DAM,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!522,asyn!523,asyn!527,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!525,asyn!526,asyn!527,asyn,asyn,lamp2a,parkin,proteasome) + Proteasome(aggp,asyn,uchl1) -> AggP(_1~0,misp,misp,misp,misp,proteasome!172).Proteasome(aggp!172,asyn,uchl1) kbinAggProt
	AggD4ProteasomeInhibition: asyn(_dam~_DAM,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!522,asyn!523,asyn!527,asyn!538,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!525,asyn!526,asyn!527,asyn!539,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!538,asyn!539,asyn,asyn,asyn,lamp2a,parkin,proteasome) + Proteasome(aggp,asyn,uchl1) -> AggP(_1~0,misp,misp,misp,misp,proteasome!172).Proteasome(aggp!172,asyn,uchl1) kbinAggProt
	AggD5ProteasomeInhibition: asyn(_dam~_DAM,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!522,asyn!523,asyn!527,asyn!538,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!525,asyn!526,asyn!527,asyn!539,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!538,asyn!539,asyn!540,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!540,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) + Proteasome(aggp,asyn,uchl1) -> AggP(_1~0,misp,misp,misp,misp,proteasome!172).Proteasome(aggp!172,asyn,uchl1) kbinAggProt
	AsynDamInclusionFormation: asyn(_dam~_DAM,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) + asyn(_dam~_DAM,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!522,asyn!523,asyn!527,asyn!538,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!525,asyn!526,asyn!527,asyn!539,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!538,asyn!539,asyn!540,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!540,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) -> SeqAggP() + aggasyndam() + aggasyndam() + aggasyndam() + aggasyndam() + aggasyndam() + aggasyndam() + aggasyndam() kagg2dam
	AsynDamInclusionGrowth1: SeqAggP() + asyn(_dam~_DAM,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) -> SeqAggP() + SeqAggP() + aggasyndam() kigrowth1
	AsynDamInclusionGrowth2: SeqAggP() + asyn(_dam~_DAM,asyn,asyn,asyn,asyn,asyn,lamp2a,parkin!517,proteasome).Parkin(asyn!517) -> SeqAggP() + SeqAggP() + aggasyndam() + aggParkin() kigrowth2
	AsynDamInclusionGrowth3: SeqAggP() + Parkin_asyn_dam_Ub() -> SeqAggP() + SeqAggP() + aggasyndam() + aggUb() + aggParkin() kigrowth2
	AsynDamInclusionGrowth4: SeqAggP() + Parkin_asyn_dam_Ub2() -> SeqAggP() + SeqAggP() + aggasyndam() + aggUb() + aggUb() + aggParkin() kigrowth2
	AsynDamInclusionGrowth5: SeqAggP() + Parkin_asyn_dam_Ub3() -> SeqAggP() + SeqAggP() + aggasyndam() + aggUb() + aggUb() + aggUb() + aggParkin() kigrowth2
	AsynDamInclusionGrowth6: SeqAggP() + Parkin_asyn_dam_Ub4() -> SeqAggP() + SeqAggP() + aggasyndam() + aggUb() + aggUb() + aggUb() + aggUb() + aggParkin() kigrowth2
	AsynDamInclusionGrowth7: SeqAggP() + Parkin_asyn_dam_Ub5() -> SeqAggP() + SeqAggP() + aggasyndam() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggParkin() kigrowth2
	AsynDamInclusionGrowth8: SeqAggP() + MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~Parkin_asyn_dam_Ub6,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) -> SeqAggP() + SeqAggP() + aggasyndam() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggParkin() kigrowth2
	AsynDamInclusionGrowth9: SeqAggP() + MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~Parkin_asyn_dam_Ub7,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) -> SeqAggP() + SeqAggP() + aggasyndam() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggParkin() kigrowth2
	AsynDamInclusionGrowth10: SeqAggP() + MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~Parkin_asyn_dam_Ub8,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) -> SeqAggP() + SeqAggP() + aggasyndam() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggParkin() kigrowth2
	AsynDamInclusionGrowth11: SeqAggP() + Parkin_asyn_dam_Ub_DUB() -> SeqAggP() + SeqAggP() + aggasyndam() + aggUb() + aggParkin() kigrowth2
	AsynDamInclusionGrowth12: SeqAggP() + Parkin_asyn_dam_Ub2_DUB() -> SeqAggP() + SeqAggP() + aggasyndam() + aggUb() + aggUb() + aggParkin() kigrowth2
	AsynDamInclusionGrowth13: SeqAggP() + Parkin_asyn_dam_Ub3_DUB() -> SeqAggP() + SeqAggP() + aggasyndam() + aggUb() + aggUb() + aggUb() + aggParkin() kigrowth2
	AsynDamInclusionGrowth14: SeqAggP() + Parkin_asyn_dam_Ub4_DUB() -> SeqAggP() + SeqAggP() + aggasyndam() + aggUb() + aggUb() + aggUb() + aggUb() + aggParkin() kigrowth2
	AsynDamInclusionGrowth15: SeqAggP() + Parkin_asyn_dam_Ub5_DUB() -> SeqAggP() + SeqAggP() + aggasyndam() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggParkin() kigrowth2
	AsynDamInclusionGrowth16: SeqAggP() + Parkin_asyn_dam_Ub6_DUB() -> SeqAggP() + SeqAggP() + aggasyndam() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggParkin() kigrowth2
	AsynDamInclusionGrowth17: SeqAggP() + Parkin_asyn_dam_Ub7_DUB() -> SeqAggP() + SeqAggP() + aggasyndam() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggParkin() kigrowth2
	AsynDamInclusionGrowth18: SeqAggP() + Parkin_asyn_dam_Ub8_DUB() -> SeqAggP() + SeqAggP() + aggasyndam() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggParkin() kigrowth2
	ROSgenerationSmallAggD1: asyn(_dam~_DAM,asyn!511,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) -> asyn(_dam~_DAM,asyn!511,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) + ROS() kgenROSAggP
	ROSgenerationSmallAggD2: asyn(_dam~_DAM,asyn!511,asyn!523,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn!522,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!522,asyn!523,asyn,asyn,asyn,lamp2a,parkin,proteasome) -> asyn(_dam~_DAM,asyn!511,asyn!523,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn!522,asyn,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!522,asyn!523,asyn,asyn,asyn,lamp2a,parkin,proteasome) + ROS() kgenROSAggP
	ROSgenerationSmallAggD3: asyn(_dam~_DAM,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!522,asyn!523,asyn!527,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!525,asyn!526,asyn!527,asyn,asyn,lamp2a,parkin,proteasome) -> asyn(_dam~_DAM,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!522,asyn!523,asyn!527,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!525,asyn!526,asyn!527,asyn,asyn,lamp2a,parkin,proteasome) + ROS() kgenROSAggP
	ROSgenerationSmallAggD4: asyn(_dam~_DAM,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!522,asyn!523,asyn!527,asyn!538,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!525,asyn!526,asyn!527,asyn!539,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!538,asyn!539,asyn,asyn,asyn,lamp2a,parkin,proteasome) -> asyn(_dam~_DAM,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!522,asyn!523,asyn!527,asyn!538,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!525,asyn!526,asyn!527,asyn!539,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!538,asyn!539,asyn,asyn,asyn,lamp2a,parkin,proteasome) + ROS() kgenROSAggP
	ROSgenerationSmallAggD5: asyn(_dam~_DAM,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!522,asyn!523,asyn!527,asyn!538,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!525,asyn!526,asyn!527,asyn!539,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!538,asyn!539,asyn!540,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!540,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) -> asyn(_dam~_DAM,asyn!511,asyn!523,asyn!526,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!511,asyn!522,asyn!525,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!522,asyn!523,asyn!527,asyn!538,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!525,asyn!526,asyn!527,asyn!539,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!538,asyn!539,asyn!540,asyn,asyn,lamp2a,parkin,proteasome).asyn(_dam~_DAM,asyn!540,asyn,asyn,asyn,asyn,lamp2a,parkin,proteasome) + ROS() kgenROSAggP
	AggregationUCHL1Dam1_reactants_0: 0  -> UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) -1*2.0*(fRate252())
	AggregationUCHL1Dam1_products_0: 0  -> UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1,uchl1,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1,uchl1,uchl1,uchl1) fRate252()
	AggregationUCHL1Dam2: UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) + UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1,uchl1,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1,uchl1,uchl1,uchl1) -> UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!529,uchl1,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!528,uchl1,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!528,uchl1!529,uchl1,uchl1,uchl1) kagg2dam
	AggregationUCHL1Dam3: UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) + UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!529,uchl1,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!528,uchl1,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!528,uchl1!529,uchl1,uchl1,uchl1) -> UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!529,uchl1!533,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!528,uchl1!532,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!528,uchl1!529,uchl1!534,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!532,uchl1!533,uchl1!534,uchl1,uchl1) kagg2dam
	AggregationUCHL1Dam4: UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) + UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!529,uchl1!533,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!528,uchl1!532,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!528,uchl1!529,uchl1!534,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!532,uchl1!533,uchl1!534,uchl1,uchl1) -> UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!529,uchl1!533,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!528,uchl1!532,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!528,uchl1!529,uchl1!534,uchl1!541,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!532,uchl1!533,uchl1!534,uchl1!542,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!541,uchl1!542,uchl1,uchl1,uchl1) kagg2dam
	AggregationUCHL1Dam5: UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) + UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!529,uchl1!533,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!528,uchl1!532,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!528,uchl1!529,uchl1!534,uchl1!541,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!532,uchl1!533,uchl1!534,uchl1!542,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!541,uchl1!542,uchl1,uchl1,uchl1) -> UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!529,uchl1!533,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!528,uchl1!532,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!528,uchl1!529,uchl1!534,uchl1!541,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!532,uchl1!533,uchl1!534,uchl1!542,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!541,uchl1!542,uchl1!545,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!545,uchl1,uchl1,uchl1,uchl1) kagg2dam
	DisaggregationUCHL1Dam1: UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!529,uchl1!533,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!528,uchl1!532,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!528,uchl1!529,uchl1!534,uchl1!541,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!532,uchl1!533,uchl1!534,uchl1!542,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!541,uchl1!542,uchl1!545,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!545,uchl1,uchl1,uchl1,uchl1) -> UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!529,uchl1!533,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!528,uchl1!532,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!528,uchl1!529,uchl1!534,uchl1!541,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!532,uchl1!533,uchl1!534,uchl1!542,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!541,uchl1!542,uchl1,uchl1,uchl1) + UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) kdisagguchl1dam5
	DisaggregationUCHL1Dam2: UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!529,uchl1!533,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!528,uchl1!532,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!528,uchl1!529,uchl1!534,uchl1!541,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!532,uchl1!533,uchl1!534,uchl1!542,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!541,uchl1!542,uchl1,uchl1,uchl1) -> UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!529,uchl1!533,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!528,uchl1!532,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!528,uchl1!529,uchl1!534,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!532,uchl1!533,uchl1!534,uchl1,uchl1) + UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) kdisagguchl1dam4
	DisaggregationUCHL1Dam3: UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!529,uchl1!533,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!528,uchl1!532,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!528,uchl1!529,uchl1!534,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!532,uchl1!533,uchl1!534,uchl1,uchl1) -> UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!529,uchl1,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!528,uchl1,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!528,uchl1!529,uchl1,uchl1,uchl1) + UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) kdisagguchl1dam3
	DisaggregationUCHL1Dam4: UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!529,uchl1,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!528,uchl1,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!528,uchl1!529,uchl1,uchl1,uchl1) -> UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1,uchl1,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1,uchl1,uchl1,uchl1) + UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) kdisagguchl1dam2
	DisaggregationUCHL1Dam5: UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1,uchl1,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1,uchl1,uchl1,uchl1) -> UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) + UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) kdisagguchl1dam1
	AggU1ProteasomeInhibition: UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1,uchl1,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1,uchl1,uchl1,uchl1) + Proteasome(aggp,asyn,uchl1) -> AggP(_1~0,misp,misp,misp,misp,proteasome!172).Proteasome(aggp!172,asyn,uchl1) kbinAggProt
	AggU2ProteasomeInhibition: UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!529,uchl1,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!528,uchl1,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!528,uchl1!529,uchl1,uchl1,uchl1) + Proteasome(aggp,asyn,uchl1) -> AggP(_1~0,misp,misp,misp,misp,proteasome!172).Proteasome(aggp!172,asyn,uchl1) kbinAggProt
	AggU3ProteasomeInhibition: UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!529,uchl1!533,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!528,uchl1!532,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!528,uchl1!529,uchl1!534,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!532,uchl1!533,uchl1!534,uchl1,uchl1) + Proteasome(aggp,asyn,uchl1) -> AggP(_1~0,misp,misp,misp,misp,proteasome!172).Proteasome(aggp!172,asyn,uchl1) kbinAggProt
	AggU4ProteasomeInhibition: UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!529,uchl1!533,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!528,uchl1!532,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!528,uchl1!529,uchl1!534,uchl1!541,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!532,uchl1!533,uchl1!534,uchl1!542,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!541,uchl1!542,uchl1,uchl1,uchl1) + Proteasome(aggp,asyn,uchl1) -> AggP(_1~0,misp,misp,misp,misp,proteasome!172).Proteasome(aggp!172,asyn,uchl1) kbinAggProt
	AggU5ProteasomeInhibition: UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!529,uchl1!533,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!528,uchl1!532,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!528,uchl1!529,uchl1!534,uchl1!541,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!532,uchl1!533,uchl1!534,uchl1!542,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!541,uchl1!542,uchl1!545,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!545,uchl1,uchl1,uchl1,uchl1) + Proteasome(aggp,asyn,uchl1) -> AggP(_1~0,misp,misp,misp,misp,proteasome!172).Proteasome(aggp!172,asyn,uchl1) kbinAggProt
	UCHL1DamInclusionFormation: UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) + UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!529,uchl1!533,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!528,uchl1!532,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!528,uchl1!529,uchl1!534,uchl1!541,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!532,uchl1!533,uchl1!534,uchl1!542,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!541,uchl1!542,uchl1!545,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!545,uchl1,uchl1,uchl1,uchl1) -> SeqAggP() + aggUchl1dam() + aggUchl1dam() + aggUchl1dam() + aggUchl1dam() + aggUchl1dam() + aggUchl1dam() + aggUchl1dam() kagg2dam
	UCHL1DamagedSequestering: SeqAggP() + UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1) -> SeqAggP() + SeqAggP() + aggUchl1dam() kigrowth1
	UCHL1DamagedLamp2aSequestering: SeqAggP() + UCHL1(_damaged~_DAMAGED,lamp2a!519,proteasome,ub,uchl1,uchl1,uchl1,uchl1,uchl1).Lamp2a(asyn,uchl1!519) -> SeqAggP() + SeqAggP() + aggUchl1dam() kigrowth1
	ROSgenerationSmallAggU1: UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1,uchl1,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1,uchl1,uchl1,uchl1) -> UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1,uchl1,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1,uchl1,uchl1,uchl1) + ROS() kgenROSAggP
	ROSgenerationSmallAggU2: UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!529,uchl1,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!528,uchl1,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!528,uchl1!529,uchl1,uchl1,uchl1) -> UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!529,uchl1,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!528,uchl1,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!528,uchl1!529,uchl1,uchl1,uchl1) + ROS() kgenROSAggP
	ROSgenerationSmallAggU3: UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!529,uchl1!533,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!528,uchl1!532,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!528,uchl1!529,uchl1!534,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!532,uchl1!533,uchl1!534,uchl1,uchl1) -> UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!529,uchl1!533,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!528,uchl1!532,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!528,uchl1!529,uchl1!534,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!532,uchl1!533,uchl1!534,uchl1,uchl1) + ROS() kgenROSAggP
	ROSgenerationSmallAggU4: UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!529,uchl1!533,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!528,uchl1!532,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!528,uchl1!529,uchl1!534,uchl1!541,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!532,uchl1!533,uchl1!534,uchl1!542,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!541,uchl1!542,uchl1,uchl1,uchl1) -> UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!529,uchl1!533,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!528,uchl1!532,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!528,uchl1!529,uchl1!534,uchl1!541,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!532,uchl1!533,uchl1!534,uchl1!542,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!541,uchl1!542,uchl1,uchl1,uchl1) + ROS() kgenROSAggP
	ROSgenerationSmallAggU5: UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!529,uchl1!533,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!528,uchl1!532,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!528,uchl1!529,uchl1!534,uchl1!541,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!532,uchl1!533,uchl1!534,uchl1!542,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!541,uchl1!542,uchl1!545,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!545,uchl1,uchl1,uchl1,uchl1) -> UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!529,uchl1!533,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!520,uchl1!528,uchl1!532,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!528,uchl1!529,uchl1!534,uchl1!541,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!532,uchl1!533,uchl1!534,uchl1!542,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!541,uchl1!542,uchl1!545,uchl1,uchl1).UCHL1(_damaged~_DAMAGED,lamp2a,proteasome,ub,uchl1!545,uchl1,uchl1,uchl1,uchl1) + ROS() kgenROSAggP
	SUBAggregation1_reactants_0: 0  -> SUB(_misfolded~_MISFOLDED,e3sub,sub,sub,sub,sub,sub) -1*2.0*(fRate275())
	SUBAggregation1_products_0: 0  -> SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub,sub,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub,sub,sub,sub) fRate275()
	SUBAggregation2: SUB(_misfolded~_MISFOLDED,e3sub,sub,sub,sub,sub,sub) + SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub,sub,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub,sub,sub,sub) -> SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!531,sub,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!530,sub,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!530,sub!531,sub,sub,sub) kaggSUB2
	SUBAggregation3: SUB(_misfolded~_MISFOLDED,e3sub,sub,sub,sub,sub,sub) + SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!531,sub,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!530,sub,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!530,sub!531,sub,sub,sub) -> SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!531,sub!536,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!530,sub!535,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!530,sub!531,sub!537,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!535,sub!536,sub!537,sub,sub) kaggSUB2
	SUBAggregation4: SUB(_misfolded~_MISFOLDED,e3sub,sub,sub,sub,sub,sub) + SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!531,sub!536,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!530,sub!535,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!530,sub!531,sub!537,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!535,sub!536,sub!537,sub,sub) -> SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!531,sub!536,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!530,sub!535,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!530,sub!531,sub!537,sub!543,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!535,sub!536,sub!537,sub!544,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!543,sub!544,sub,sub,sub) kaggSUB2
	SUBAggregation5: SUB(_misfolded~_MISFOLDED,e3sub,sub,sub,sub,sub,sub) + SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!531,sub!536,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!530,sub!535,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!530,sub!531,sub!537,sub!543,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!535,sub!536,sub!537,sub!544,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!543,sub!544,sub,sub,sub) -> SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!531,sub!536,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!530,sub!535,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!530,sub!531,sub!537,sub!543,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!535,sub!536,sub!537,sub!544,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!543,sub!544,sub!546,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!546,sub,sub,sub,sub) kaggSUB2
	SUBDisaggregation1: SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!531,sub!536,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!530,sub!535,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!530,sub!531,sub!537,sub!543,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!535,sub!536,sub!537,sub!544,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!543,sub!544,sub!546,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!546,sub,sub,sub,sub) -> SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!531,sub!536,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!530,sub!535,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!530,sub!531,sub!537,sub!543,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!535,sub!536,sub!537,sub!544,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!543,sub!544,sub,sub,sub) + SUB(_misfolded~_MISFOLDED,e3sub,sub,sub,sub,sub,sub) kdisaggSUB5
	SUBDisaggregation2: SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!531,sub!536,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!530,sub!535,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!530,sub!531,sub!537,sub!543,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!535,sub!536,sub!537,sub!544,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!543,sub!544,sub,sub,sub) -> SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!531,sub!536,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!530,sub!535,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!530,sub!531,sub!537,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!535,sub!536,sub!537,sub,sub) + SUB(_misfolded~_MISFOLDED,e3sub,sub,sub,sub,sub,sub) kdisaggSUB4
	SUBDisaggregation3: SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!531,sub!536,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!530,sub!535,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!530,sub!531,sub!537,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!535,sub!536,sub!537,sub,sub) -> SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!531,sub,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!530,sub,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!530,sub!531,sub,sub,sub) + SUB(_misfolded~_MISFOLDED,e3sub,sub,sub,sub,sub,sub) kdisaggSUB3
	SUBDisaggregation4: SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!531,sub,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!530,sub,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!530,sub!531,sub,sub,sub) -> SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub,sub,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub,sub,sub,sub) + SUB(_misfolded~_MISFOLDED,e3sub,sub,sub,sub,sub,sub) kdisaggSUB2
	SUBDisaggregation5: SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub,sub,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub,sub,sub,sub) -> SUB(_misfolded~_MISFOLDED,e3sub,sub,sub,sub,sub,sub) + SUB(_misfolded~_MISFOLDED,e3sub,sub,sub,sub,sub,sub) kdisaggSUB1
	AggS1ProteasomeInhibition: SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub,sub,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub,sub,sub,sub) + Proteasome(aggp,asyn,uchl1) -> AggP(_1~0,misp,misp,misp,misp,proteasome!172).Proteasome(aggp!172,asyn,uchl1) kbinAggProt
	AggS2ProteasomeInhibition: SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!531,sub,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!530,sub,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!530,sub!531,sub,sub,sub) + Proteasome(aggp,asyn,uchl1) -> AggP(_1~0,misp,misp,misp,misp,proteasome!172).Proteasome(aggp!172,asyn,uchl1) kbinAggProt
	AggS3ProteasomeInhibition: SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!531,sub!536,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!530,sub!535,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!530,sub!531,sub!537,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!535,sub!536,sub!537,sub,sub) + Proteasome(aggp,asyn,uchl1) -> AggP(_1~0,misp,misp,misp,misp,proteasome!172).Proteasome(aggp!172,asyn,uchl1) kbinAggProt
	AggS4ProteasomeInhibition: SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!531,sub!536,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!530,sub!535,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!530,sub!531,sub!537,sub!543,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!535,sub!536,sub!537,sub!544,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!543,sub!544,sub,sub,sub) + Proteasome(aggp,asyn,uchl1) -> AggP(_1~0,misp,misp,misp,misp,proteasome!172).Proteasome(aggp!172,asyn,uchl1) kbinAggProt
	AggS5ProteasomeInhibition: SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!531,sub!536,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!530,sub!535,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!530,sub!531,sub!537,sub!543,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!535,sub!536,sub!537,sub!544,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!543,sub!544,sub!546,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!546,sub,sub,sub,sub) + Proteasome(aggp,asyn,uchl1) -> AggP(_1~0,misp,misp,misp,misp,proteasome!172).Proteasome(aggp!172,asyn,uchl1) kbinAggProt
	SUBInclusionFormation: SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!531,sub!536,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!530,sub!535,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!530,sub!531,sub!537,sub!543,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!535,sub!536,sub!537,sub!544,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!543,sub!544,sub!546,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!546,sub,sub,sub,sub) + SUB(_misfolded~_MISFOLDED,e3sub,sub,sub,sub,sub,sub) -> SeqAggP() + aggSUB() + aggSUB() + aggSUB() + aggSUB() + aggSUB() + aggSUB() + aggSUB() kaggSUB2
	SUBInclusionGrowth0: SeqAggP() + SUB(_misfolded~_MISFOLDED,e3sub,sub,sub,sub,sub,sub) -> SeqAggP() + SeqAggP() + aggSUB() kigrowth1
	SUBInclusionGrowth1: SUB(_misfolded~_MISFOLDED,e3sub!518,sub,sub,sub,sub,sub).E3SUB(sub!518) + SeqAggP() -> SeqAggP() + SeqAggP() + aggSUB() kigrowth2
	SUBInclusionGrowth2: E3SUB_SUB_misfolded_Ub() + SeqAggP() -> SeqAggP() + SeqAggP() + aggSUB() + aggUb() kigrowth2
	SUBInclusionGrowth3: E3SUB_SUB_misfolded_Ub2() + SeqAggP() -> SeqAggP() + SeqAggP() + aggSUB() + aggUb() + aggUb() kigrowth2
	SUBInclusionGrowth4: E3SUB_SUB_misfolded_Ub3() + SeqAggP() -> SeqAggP() + SeqAggP() + aggSUB() + aggUb() + aggUb() + aggUb() kigrowth2
	SUBInclusionGrowth5: E3SUB_SUB_misfolded_Ub4() + SeqAggP() -> SeqAggP() + SeqAggP() + aggSUB() + aggUb() + aggUb() + aggUb() + aggUb() kigrowth2
	SUBInclusionGrowth6: E3SUB_SUB_misfolded_Ub5() + SeqAggP() -> SeqAggP() + SeqAggP() + aggSUB() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() kigrowth2
	SUBInclusionGrowth7: E3SUB_SUB_misfolded_Ub6() + SeqAggP() -> SeqAggP() + SeqAggP() + aggSUB() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() kigrowth2
	SUBInclusionGrowth8: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~E3SUB_SUB_misfolded_Ub7,E3SUB_SUB_misfolded_Ub8~0,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + SeqAggP() -> SeqAggP() + SeqAggP() + aggSUB() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() kigrowth2
	SUBInclusionGrowth9: MisP_Ub7_Proteasome(_5~0,E3SUB_SUB_misfolded_Ub7~0,E3SUB_SUB_misfolded_Ub8~E3SUB_SUB_misfolded_Ub8,MisP_Ub5_Proteasome~0,MisP_Ub6_Proteasome~0,MisP_Ub8_Proteasome~0,Parkin_asyn_dam_Ub6~0,Parkin_asyn_dam_Ub7~0,Parkin_asyn_dam_Ub8~0,SUB_misfolded_Ub4_Proteasome~0,SUB_misfolded_Ub5_Proteasome~0,SUB_misfolded_Ub6_Proteasome~0,SUB_misfolded_Ub7_Proteasome~0,SUB_misfolded_Ub8_Proteasome~0,asyn_dam_Ub4_Proteasome~0,asyn_dam_Ub5_Proteasome~0,asyn_dam_Ub6_Proteasome~0,asyn_dam_Ub7_Proteasome~0,asyn_dam_Ub8_Proteasome~0) + SeqAggP() -> SeqAggP() + SeqAggP() + aggSUB() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() kigrowth2
	SUBInclusionGrowth10: E3SUB_SUB_misfolded_Ub_UCHL1() + SeqAggP() -> SeqAggP() + SeqAggP() + aggSUB() + aggUchl1() + aggUb() kigrowth2
	SUBInclusionGrowth11: E3SUB_SUB_misfolded_Ub2_UCHL1() + SeqAggP() -> SeqAggP() + SeqAggP() + aggSUB() + aggUchl1() + aggUb() + aggUb() kigrowth2
	SUBInclusionGrowth12: E3SUB_SUB_misfolded_Ub3_UCHL1() + SeqAggP() -> SeqAggP() + SeqAggP() + aggSUB() + aggUchl1() + aggUb() + aggUb() + aggUb() kigrowth2
	SUBInclusionGrowth13: E3SUB_SUB_misfolded_Ub4_UCHL1() + SeqAggP() -> SeqAggP() + SeqAggP() + aggSUB() + aggUchl1() + aggUb() + aggUb() + aggUb() + aggUb() kigrowth2
	SUBInclusionGrowth14: E3SUB_SUB_misfolded_Ub5_UCHL1() + SeqAggP() -> SeqAggP() + SeqAggP() + aggSUB() + aggUchl1() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() kigrowth2
	SUBInclusionGrowth15: E3SUB_SUB_misfolded_Ub6_UCHL1() + SeqAggP() -> SeqAggP() + SeqAggP() + aggSUB() + aggUchl1() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() kigrowth2
	SUBInclusionGrowth16: E3SUB_SUB_misfolded_Ub7_UCHL1() + SeqAggP() -> SeqAggP() + SeqAggP() + aggSUB() + aggUchl1() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() kigrowth2
	SUBInclusionGrowth17: E3SUB_SUB_misfolded_Ub8_UCHL1() + SeqAggP() -> SeqAggP() + SeqAggP() + aggSUB() + aggUchl1() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() + aggUb() kigrowth2
	ROSgenerationSmallAggS1: SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub,sub,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub,sub,sub,sub) -> SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub,sub,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub,sub,sub,sub) + ROS() kgenROSAggP
	ROSgenerationSmallAggS2: SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!531,sub,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!530,sub,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!530,sub!531,sub,sub,sub) -> SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!531,sub,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!530,sub,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!530,sub!531,sub,sub,sub) + ROS() kgenROSAggP
	ROSgenerationSmallAggS3: SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!531,sub!536,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!530,sub!535,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!530,sub!531,sub!537,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!535,sub!536,sub!537,sub,sub) -> SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!531,sub!536,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!530,sub!535,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!530,sub!531,sub!537,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!535,sub!536,sub!537,sub,sub) + ROS() kgenROSAggP
	ROSgenerationSmallAggS4: SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!531,sub!536,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!530,sub!535,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!530,sub!531,sub!537,sub!543,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!535,sub!536,sub!537,sub!544,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!543,sub!544,sub,sub,sub) -> SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!531,sub!536,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!530,sub!535,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!530,sub!531,sub!537,sub!543,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!535,sub!536,sub!537,sub!544,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!543,sub!544,sub,sub,sub) + ROS() kgenROSAggP
	ROSgenerationSmallAggS5: SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!531,sub!536,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!530,sub!535,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!530,sub!531,sub!537,sub!543,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!535,sub!536,sub!537,sub!544,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!543,sub!544,sub!546,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!546,sub,sub,sub,sub) -> SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!531,sub!536,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!521,sub!530,sub!535,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!530,sub!531,sub!537,sub!543,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!535,sub!536,sub!537,sub!544,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!543,sub!544,sub!546,sub,sub).SUB(_misfolded~_MISFOLDED,e3sub,sub!546,sub,sub,sub,sub) + ROS() kgenROSAggP
	radicalFormation: 0  -> ROS() fRate314()
	radicalScavenging: ROS() -> 0  kremROS
end reaction rules
end model
