###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000298', 'http://identifiers.org/biomodels.db/MODEL0478965170']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/10643740']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/biomodels.db/BIOMD0000000171']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0042752']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/7227']
#@BQB_IS_PART_OF:['http://identifiers.org/kegg.pathway/dme04710']
#@creatorEmail:'c.lloyd@auckland.ac.nz'
#@creatorName:'Lloyd Catherine'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 10 molecules and 0 reactions. The translated model has 10 molecules and 10 rules'
###
begin model
begin parameters
	vsP 1.1
	vmP 1.0
	KmP 0.2
	KIP 1.0
	ksP 0.9
	vdP 2.2
	KdP 0.2
	vsT 1.0
	vmT 0.7
	KmT 0.2
	KIT 1.0
	ksT 0.9
	vdT 3.0
	KdT 0.2
	kdC 0.01
	kdN 0.01
	k1 0.8
	k2 0.2
	k3 1.2
	k4 0.6
	kd 0.01
	V1P 8.0
	V1T 8.0
	V2P 1.0
	V2T 1.0
	V3P 8.0
	V3T 8.0
	V4P 1.0
	V4T 1.0
	K1P 2.0
	K1T 2.0
	K2P 2.0
	K2T 2.0
	K3P 2.0
	K3T 2.0
	K4P 2.0
	K4T 2.0
	n 4.0
end parameters
begin molecule types
	P0()
	P2()
	MP()
	C()
	P1()
	T2()
	T0()
	MT()
	CN()
	T1()
end molecule types
begin seed species
	MP() 3.699724096e+22 # 0.0614368mol/L * 6.022e23/mol *1.0L #MP #MP
	CN() 8.11332016e+23 #original 1.34728mol/L #CN #CN
	C() 1.250251508e+23 #original 0.207614mol/L #C #C
	T2() 8.75767416e+21 #original 0.0145428mol/L #T2 #T2
	T1() 1.284998448e+22 #original 0.0213384mol/L #T1 #T1
	T0() 1.308345742e+22 #original 0.0217261mol/L #T0 #T0
	MT() 5.180979524000001e+22 #original 0.0860342mol/L #MT #MT
	P0() 1.023306416e+22 #original 0.0169928mol/L #P0 #P0
	P1() 8.512458320000001e+21 #original 0.0141356mol/L #P1 #P1
	P2() 3.699724096e+22 #original 0.0614368mol/L #P2 #P2
end seed species
begin observables
	Species MP MP() #MP
	Species CN CN() #CN
	Species C C() #C
	Species T2 T2() #T2
	Species T1 T1() #T1
	Species T0 T0() #T0
	Species MT MT() #MT
	Species P0 P0() #P0
	Species P1 P1() #P1
	Species P2 P2() #P2
end observables
begin functions
	arRateCN() = C*k1 - CN*k2 - CN*kdN
	arRateC() = -C*k1 - C*k4 - C*kdC + CN*k2 + P2*T2*k3
	arRateT2() = C*k4 - P2*T2*k3 + T1*V3T/(K3T + T1) - T2*V4T/(K4T + T2) - T2*kd - T2*vdT/(KdT + T2)
	arRateT1() = T0*V1T/(K1T + T0) - T1*V2T/(K2T + T1) - T1*V3T/(K3T + T1) - T1*kd + T2*V4T/(K4T + T2)
	arRateT0() = MT*ksT - T0*V1T/(K1T + T0) - T0*kd + T1*V2T/(K2T + T1)
	arRateMT() = KIT^n*vsT/(CN^n + KIT^n) - MT*kd - MT*vmT/(KmT + MT)
	arRateP2() = C*k4 + P1*V3P/(K3P + P1) - P2*T2*k3 - P2*V4P/(K4P + P2) - P2*kd - P2*vdP/(KdP + P2)
	arRateP1() = P0*V1P/(K1P + P0) - P1*V2P/(K2P + P1) - P1*V3P/(K3P + P1) - P1*kd + P2*V4P/(K4P + P2)
	arRateP0() = MP*ksP - P0*V1P/(K1P + P0) - P0*kd + P1*V2P/(K2P + P1)
	arRateMP() = KIP^n*vsP/(CN^n + KIP^n) - MP*kd - MP*vmP/(KmP + MP)
	Pt() = C + CN + P0 + P1 + P2
end functions
begin reaction rules
	0  -> MP() arRateMP #rateLaw
	0  -> P0() arRateP0 #rateLaw
	0  -> P1() arRateP1 #rateLaw
	0  -> P2() arRateP2 #rateLaw
	0  -> MT() arRateMT #rateLaw
	0  -> T0() arRateT0 #rateLaw
	0  -> T1() arRateT1 #rateLaw
	0  -> T2() arRateT2 #rateLaw
	0  -> C() arRateC #rateLaw
	0  -> CN() arRateCN #rateLaw
end reaction rules
end model
