###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000303', 'http://identifiers.org/biomodels.db/MODEL1101260000']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/21283780']
#@BQB_IS_PART_OF:['http://identifiers.org/kegg.pathway/hsa04610']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0006956', 'http://identifiers.org/reactome/REACT_6932.3']
#@BQB_HAS_VERSION:['http://identifiers.org/go/GO:0001867', 'http://identifiers.org/go/GO:0006958']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_HAS_PROPERTY:['http://identifiers.org/doid/DOID:104']
#@creatorEmail:'lukas@ebi.ac.uk'
#@creatorName:'Endler Lukas'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 42 molecules and 45 reactions. The translated model has 20 molecules and 45 rules'
###
begin model
begin parameters
	ka01_1 0.0275999
	ka01_2 0.0109
	ka02_1 0.00074
	ka02_2 0.0011
	ka03_1 2.0
	ka04_1 10.5
	kc01_1 0.64564661669102
	kc01_2 0.194551104058408
	kc02 0.000591152775857994
	kc03_1 0.414004459949002
	kc03_2 0.99647572245388
	kc04_1 0.977836567576895
	ka03_2 500.0
	ka04_2 2500.0
	kd02_2 0.1
	kd02_1 0.0368010796682635
	kd03_1 66.3776807395383
	kd03_2 829.115813389061
	kb01_1 0.091011109910329
	kb01_2 0.0508205528375529
	kb02_1 0.0368010796682635
	kb02_2 0.1
	kb03_1 66.3776807395383
	kb03_2 829.115813389061
	kb04_1 1.1
	kb04_2 2000.0
	kc04_2 0.199162432258527
	kd01_1 7.07e-05
	kd01_2 7.23e-05
	kd04_1 1.1
	kd04_2 2000.0
	ke01_1 7.07e-05
	ke01_2 0.0001
	ke02_1 0.00074
	ke02_2 0.0011
	ke03_1 2.0
	ke03_2 500.0
	ke04_1 10.5
	ke04_2 2500.0
	kf01_1 0.969998277173144
	kf01_2 0.069020578737621
	kf02_1 0.969998277173144
	kf02_2 0.069020578737621
	kf03 0.0613537204215846
	kf04_2 0.983691204042155
	kf04_1 0.613416050428938
	kf05 0.980777558937884
	kf06_1 0.613416050428938
	kf06_2 0.983691204042155
	kf07_1 0.613416050428938
	kf07_2 0.983691204042155
	kd05_1 0.00074
	kd05_2 0.0011
	kd06_1 2.0
	kd06_2 500.0
	kd07_1 10.5
	kd07_2 2500.0
	ke05_1 0.0368010796682635
	ke05_2 0.1
	ke06_1 66.3776807395383
	ke06_2 829.115813389061
	ke07_1 1.1
	ke07_2 2000.0
	kd08_1 0.0368010796682635
	kd08_2 0.1
	kd09_1 0.00074
	kd09_2 0.0011
	kd10_1 71.1705760475931
	kd10_2 3796.22684377655
	kd11_1 38.9625903487667
	kd11_2 5972.30640657865
	kg01_1 0.091011109910329
	kg01_2 0.0508205528375529
	kg02_1 0.0368010796682635
	kg02_2 0.1
	kg03_1 66.3776807395383
	kg03_2 829.115813389061
	kg04_1 1.1
	kg04_2 2000.0
	kt01 0.000342266
	kt02 0.492901
	kt03 0.0470911
	kt04_1 0
	kt04_2 0
	r28_k1_4 0.000342
	r29_k1_4 0.492901
	r30_k1_4 0.047091
	r34_k1_4 0.000000
	r34_k2 0.000000
end parameters
begin molecule types
	#^ bqbiol:is chebi:CHEBI:506227, kegg.compound:C00140
	GlcNac(lf,masp)
	#^ bqbiol:isVersionOf uniprot:P02741, interpro:IPR001759, reactome:REACT_27052.1
	CRP(c1,c4bp,lf,pc)
	#^ bqbiol:isVersionOf reactome:REACT_26114.1
	#^ bqbiol:hasProperty go:GO:0009986
	dC3b()
	#^ bqbiol:is chebi:CHEBI:18132, kegg.compound:C00588
	PC(crp)
	X(hf)
	#^ bqbiol:isVersionOf uniprot:P04003
	C4BP(c4b,crp)
	#^ bqbiol:hasPart chebi:CHEBI:18132
	#^ bqbiol:hasVersion uniprot:Q15485, uniprot:P02741, uniprot:O00187
	PC_CRP_LF_MASP()
	#^ bqbiol:hasPart chebi:CHEBI:506227
	#^ bqbiol:hasVersion uniprot:O00187
	GlcNac_HF_MASP()
	#^ bqbiol:isVersionOf reactome:REACT_8331.2
	C2a(c2b,c4b)
	#^ bqbiol:isVersionOf uniprot:P0C0L4, reactome:REACT_25991.1
	#^ bqbiol:hasVersion uniprot:P0C0L5
	C4a(c4b)
	HF(x)
	#^ bqbiol:isVersionOf reactome:REACT_8600.2
	C2b(c2a)
	#^ bqbiol:isVersionOf reactome:REACT_8213.1
	#^ bqbiol:hasVersion uniprot:P01024
	C3()
	#^ bqbiol:isVersionOf reactome:REACT_8086.1, uniprot:P01024
	C3a()
	#^ bqbiol:isVersionOf reactome:REACT_8621.1
	C3b()
	#^ bqbiol:isVersionOf uniprot:P0C0L5, reactome:REACT_26471.1
	#^ bqbiol:hasVersion uniprot:P0C0L4
	C4b(c2a,c4a,c4bp,d~D~0,i~I~0)
	#^ bqbiol:isVersionOf uniprot:Q15485
	LF(crp,glcnac)
	#^ bqbiol:isVersionOf reactome:REACT_8815.1
	C1(crp)
	#^ bqbiol:hasPart chebi:CHEBI:18132
	#^ bqbiol:hasVersion uniprot:O00187, uniprot:Q15485, reactome:REACT_8815.1
	PC_CRP_LF_C1_MASP()
	#^ bqbiol:hasVersion uniprot:O00187
	MASP(GlcNac_LF_C1_MASP~GlcNac_LF_C1_MASP~0,glcnac)
end molecule types
begin seed species
	CRP(c1,c4bp,lf,pc) 1204400000000000.2 # (2.0 * 1e-09)mol/L * 6.022e23/mol *1.0L #CRP #CRP
	PC(crp) 19739875120000.004 #original 0.0327796nano mole/ #PC #PC
	C4b(c2a,c4a!548,c4bp,d~0,i~0).C4a(c4b!548) 4.6369400000000006e+17 #original 770.0nano mole/ #C4 #C4
	C2a(c2b!549,c4b).C2b(c2a!549) 1.86682e+17 #original 310.0nano mole/ #C2 #C2
	C1(crp) 1.487434e+18 #original 2470.0nano mole/ #C1 #C1
	C3() 2.8002300000000005e+18 #original 4650.0nano mole/ #C3 #C3
	MASP(GlcNac_LF_C1_MASP~0,glcnac) 4094960000000000.5 #original 6.8nano mole/ #MASP #MASP
	LF(crp,glcnac) 1.2044e+16 #original 20.0nano mole/ #LF #LF
	C4BP(c4b,crp) 1.56572e+17 #original 260.0nano mole/ #C4BP #C4BP
	X(hf) 301100000000.00006 #original 0.0005nano mole/ #X #X
end seed species
begin observables
	Species CRP CRP(c1,c4bp,lf,pc) #CRP
	Species PC PC(crp) #PC
	Species PC_CRP CRP(c1,c4bp,lf,pc!550).PC(crp!550) #PC/CRP
	Species C4 C4b(c2a,c4a!548,c4bp,d~0,i~0).C4a(c4b!548) #C4
	Species C4a C4a(c4b) #C4a
	Species C4b C4b(c2a,c4a,c4bp,d~0,i~0) #C4b
	Species C2 C2a(c2b!549,c4b).C2b(c2a!549) #C2
	Species C1 C1(crp) #C1
	Species PC_CRP_C1 CRP(c1!557,c4bp,lf,pc!550).PC(crp!550).C1(crp!557) #PC/CRP/C1
	Species C2a C2a(c2b,c4b) #C2a
	Species C2b C2b(c2a) #C2b
	Species C4b_C2a C4b(c2a!551,c4a,c4bp,d~0,i~0).C2a(c2b,c4b!551) #C4b/C2a
	Species C3 C3() #C3
	Species C3a C3a() #C3a
	Species C3b C3b() #C3b
	Species dC3b dC3b() #dC3b
	Species MASP MASP(GlcNac_LF_C1_MASP~0,glcnac) #MASP
	Species dC4b_C2a C4b(c2a!551,c4a,c4bp,d~D,i~0).C2a(c2b,c4b!551) #dC4b/C2a
	Species GlcNac GlcNac(lf,masp) #GlcNac
	Species GlcNac_LF GlcNac(lf!553,masp).LF(crp,glcnac!553) #GlcNac/LF
	Species LF LF(crp,glcnac) #LF
	Species GlcNac_LF_MASP LF(crp,glcnac!553).GlcNac(lf!553,masp!556).MASP(GlcNac_LF_C1_MASP~0,glcnac!556) #GlcNac/LF/MASP
	Species PC_CRP_LF CRP(c1,c4bp,lf!555,pc!550).LF(crp!555,glcnac).PC(crp!550) #PC/CRP/LF
	Species PC_CRP_LF_MASP PC_CRP_LF_MASP() #PC/CRP/LF/MASP
	Species GlcNac_LF_CRP CRP(c1,c4bp,lf!555,pc).GlcNac(lf!553,masp).LF(crp!555,glcnac!553) #GlcNac/LF/CRP
	Species GlcNac_LF_CRP_C1 CRP(c1!557,c4bp,lf!555,pc).GlcNac(lf!553,masp).LF(crp!555,glcnac!553).C1(crp!557) #GlcNac/LF/CRP/C1
	Species C4BP C4BP(c4b,crp) #C4BP
	Species C4BP_PC_CRP CRP(c1,c4bp!558,lf,pc!550).C4BP(c4b,crp!558).PC(crp!550) #C4BP/PC/CRP
	Species C4BP_GlcNac_LF_CRP CRP(c1,c4bp!558,lf!555,pc).GlcNac(lf!553,masp).LF(crp!555,glcnac!553).C4BP(c4b,crp!558) #C4BP/GlcNac/LF/CRP
	Species iC4b_C2a C4b(c2a!551,c4a,c4bp,d~0,i~I).C2a(c2b,c4b!551) #iC4b/C2a
	Species C4BP_C4b C4b(c2a,c4a,c4bp!552,d~0,i~0).C4BP(c4b!552,crp) #C4BP/C4b
	Species C4b_C2a_C4BP C4b(c2a!551,c4a,c4bp!552,d~0,i~0).C2a(c2b,c4b!551).C4BP(c4b!552,crp) #C4b/C2a/C4BP
	Species dC4b_C2a_C4BP C4b(c2a!551,c4a,c4bp!552,d~D,i~0).C2a(c2b,c4b!551).C4BP(c4b!552,crp) #dC4b/C2a/C4BP
	Species PC_CRP_LF_C1 CRP(c1!557,c4bp,lf!555,pc!550).LF(crp!555,glcnac).PC(crp!550).C1(crp!557) #PC/CRP/LF/C1
	Species C4BP_PC_CRP_LF CRP(c1,c4bp!558,lf!555,pc!550).LF(crp!555,glcnac).C4BP(c4b,crp!558).PC(crp!550) #C4BP/PC/CRP/LF
	Species GlcNac_LF_CRP_MASP CRP(c1,c4bp,lf!555,pc).GlcNac(lf!553,masp!556).LF(crp!555,glcnac!553).MASP(GlcNac_LF_C1_MASP~0,glcnac!556) #GlcNac/LF/CRP/MASP
	Species PC_CRP_LF_C1_MASP PC_CRP_LF_C1_MASP() #PC/CRP/LF/C1/MASP
	Species GlcNac_LF_C1_MASP MASP(GlcNac_LF_C1_MASP~GlcNac_LF_C1_MASP,glcnac) #GlcNac/LF/C1/MASP
	Species GlcNac_HF X(hf!554).HF(x!554) #GlcNac/HF
	Species HF HF(x) #HF
	Species GlcNac_HF_MASP GlcNac_HF_MASP() #GlcNac/HF/MASP
	Species X X(hf) #X
end observables
begin functions
	mC3() = dC3b
	fRate2() = PC_CRP_C1*ka03_1/(C4 + ka03_2)
	fRate3() = PC_CRP_C1*ka04_1/(C2 + ka04_2)
	fRate10() = PC_CRP_LF_MASP*kd03_1/(C4 + kd03_2)
	fRate11() = PC_CRP_LF_MASP*kd04_1/(C2 + kd04_2)
	fRate14() = GlcNac_LF_MASP*kb03_1/(C4 + kb03_2)
	fRate15() = GlcNac_LF_MASP*kb04_1/(C2 + kb04_2)
	fRate18() = GlcNac_LF_CRP_C1*ke03_1/(C4 + ke03_2)
	fRate19() = GlcNac_LF_CRP_C1*ke04_1/(C2 + ke04_2)
	fRate31() = PC_CRP_LF_C1*kd06_1/(C4 + kd06_2)
	fRate32() = PC_CRP_LF_C1*kd07_1/(C2 + kd07_2)
	fRate35() = GlcNac_LF_CRP_MASP*ke06_1/(C4 + ke06_2)
	fRate36() = GlcNac_LF_CRP_MASP*ke07_1/(C2 + ke07_2)
	fRate39() = PC_CRP_LF_C1_MASP*kd10_1/(C4 + kd10_2)
	fRate40() = PC_CRP_LF_C1_MASP*kd11_1/(C2 + kd11_2)
	fRate43() = GlcNac_HF_MASP*kg03_1/(C4 + kg03_2)
	fRate44() = GlcNac_HF_MASP*kg04_1/(C2 + kg04_2)
end functions
begin reaction rules
	a_01: PC(crp) + CRP(c1,c4bp,lf,pc) <-> CRP(c1,c4bp,lf,pc!550).PC(crp!550) ka01_1,ka01_2
	a_02: CRP(c1,c4bp,lf,pc!550).PC(crp!550) + C1(crp) <-> CRP(c1!557,c4bp,lf,pc!550).PC(crp!550).C1(crp!557) ka02_1,ka02_2
	a_03: C4b(c2a,c4a!548,c4bp,d~0,i~0).C4a(c4b!548) -> C4a(c4b) + C4b(c2a,c4a,c4bp,d~0,i~0) fRate2() #Modifiers(PC_CRP_C1)
	a_04: C2a(c2b!549,c4b).C2b(c2a!549) -> C2a(c2b,c4b) + C2b(c2a) fRate3() #Modifiers(PC_CRP_C1)
	c_01: C4b(c2a,c4a,c4bp,d~0,i~0) + C2a(c2b,c4b) <-> C4b(c2a!551,c4a,c4bp,d~0,i~0).C2a(c2b,c4b!551) kc01_1,kc01_2
	c_02: C4b(c2a!551,c4a,c4bp,d~0,i~0).C2a(c2b,c4b!551) + C3() -> C4b(c2a!551,c4a,c4bp,d~0,i~0).C2a(c2b,c4b!551) + C3a() + C3b() kc02
	c_03: C3b() <-> dC3b() kc03_1,kc03_2
	c_04: C4b(c2a!551,c4a,c4bp,d~0,i~0).C2a(c2b,c4b!551) <-> C4b(c2a!551,c4a,c4bp,d~D,i~0).C2a(c2b,c4b!551) kc04_1,kc04_2
	d_01: CRP(c1,c4bp,lf,pc!550).PC(crp!550) + LF(crp,glcnac) <-> CRP(c1,c4bp,lf!555,pc!550).LF(crp!555,glcnac).PC(crp!550) kd01_1,kd01_2
	d_02: CRP(c1,c4bp,lf!555,pc!550).LF(crp!555,glcnac).PC(crp!550) + MASP(GlcNac_LF_C1_MASP~0,glcnac) <-> PC_CRP_LF_MASP() kd02_1,kd02_2
	d_03: C4b(c2a,c4a!548,c4bp,d~0,i~0).C4a(c4b!548) -> C4a(c4b) + C4b(c2a,c4a,c4bp,d~0,i~0) fRate10() #Modifiers(PC_CRP_LF_MASP)
	d_04: C2a(c2b!549,c4b).C2b(c2a!549) -> C2a(c2b,c4b) + C2b(c2a) fRate11() #Modifiers(PC_CRP_LF_MASP)
	b_01: GlcNac(lf,masp) + LF(crp,glcnac) <-> GlcNac(lf!553,masp).LF(crp,glcnac!553) kb01_1,kb01_2
	b_02: GlcNac(lf!553,masp).LF(crp,glcnac!553) + MASP(GlcNac_LF_C1_MASP~0,glcnac) <-> LF(crp,glcnac!553).GlcNac(lf!553,masp!556).MASP(GlcNac_LF_C1_MASP~0,glcnac!556) kb02_1,kb02_2
	b_03: C4b(c2a,c4a!548,c4bp,d~0,i~0).C4a(c4b!548) -> C4a(c4b) + C4b(c2a,c4a,c4bp,d~0,i~0) fRate14() #Modifiers(GlcNac_LF_MASP)
	b_04: C2a(c2b!549,c4b).C2b(c2a!549) -> C2a(c2b,c4b) + C2b(c2a) fRate15() #Modifiers(GlcNac_LF_MASP)
	e_01: GlcNac(lf!553,masp).LF(crp,glcnac!553) + CRP(c1,c4bp,lf,pc) <-> CRP(c1,c4bp,lf!555,pc).GlcNac(lf!553,masp).LF(crp!555,glcnac!553) ke01_1,ke01_2
	e_02: CRP(c1,c4bp,lf!555,pc).GlcNac(lf!553,masp).LF(crp!555,glcnac!553) + C1(crp) <-> CRP(c1!557,c4bp,lf!555,pc).GlcNac(lf!553,masp).LF(crp!555,glcnac!553).C1(crp!557) ke02_1,ke02_2
	e_03: C4b(c2a,c4a!548,c4bp,d~0,i~0).C4a(c4b!548) -> C4a(c4b) + C4b(c2a,c4a,c4bp,d~0,i~0) fRate18() #Modifiers(GlcNac_LF_CRP_C1)
	e_04: C2a(c2b!549,c4b).C2b(c2a!549) -> C2a(c2b,c4b) + C2b(c2a) fRate19() #Modifiers(GlcNac_LF_CRP_C1)
	f_01: C4BP(c4b,crp) + CRP(c1,c4bp,lf,pc!550).PC(crp!550) <-> CRP(c1,c4bp!558,lf,pc!550).C4BP(c4b,crp!558).PC(crp!550) kf01_1,kf01_2
	f_02: C4BP(c4b,crp) + CRP(c1,c4bp,lf!555,pc).GlcNac(lf!553,masp).LF(crp!555,glcnac!553) <-> CRP(c1,c4bp!558,lf!555,pc).GlcNac(lf!553,masp).LF(crp!555,glcnac!553).C4BP(c4b,crp!558) kf02_1,kf02_2
	f_03: C4b(c2a!551,c4a,c4bp,d~0,i~0).C2a(c2b,c4b!551) + C4BP(c4b,crp) -> C4b(c2a!551,c4a,c4bp,d~0,i~I).C2a(c2b,c4b!551) + C4BP(c4b,crp) kf03
	f_04: C4BP(c4b,crp) + C4b(c2a,c4a,c4bp,d~0,i~0) <-> C4b(c2a,c4a,c4bp!552,d~0,i~0).C4BP(c4b!552,crp) kf04_1,kf04_2
	f_05: C4b(c2a!551,c4a,c4bp,d~0,i~0).C2a(c2b,c4b!551) + C4BP(c4b,crp) -> C4b(c2a,c4a,c4bp,d~0,i~0) + C2a(c2b,c4b) + C4BP(c4b,crp) kf05
	f_06: C4b(c2a!551,c4a,c4bp,d~0,i~0).C2a(c2b,c4b!551) + C4BP(c4b,crp) <-> C4b(c2a!551,c4a,c4bp!552,d~0,i~0).C2a(c2b,c4b!551).C4BP(c4b!552,crp) kf06_1,kf06_2
	f_07: C4b(c2a!551,c4a,c4bp,d~D,i~0).C2a(c2b,c4b!551) + C4BP(c4b,crp) <-> C4b(c2a!551,c4a,c4bp!552,d~D,i~0).C2a(c2b,c4b!551).C4BP(c4b!552,crp) kf07_1,kf07_2
	t_01: C4BP(c4b,crp) -> 0  r28_k1_4
	t_02: C3b() -> 0  r29_k1_4
	t_03: C4b(c2a!551,c4a,c4bp,d~0,i~0).C2a(c2b,c4b!551) -> 0  r30_k1_4
	d_05: CRP(c1,c4bp,lf!555,pc!550).LF(crp!555,glcnac).PC(crp!550) + C1(crp) <-> CRP(c1!557,c4bp,lf!555,pc!550).LF(crp!555,glcnac).PC(crp!550).C1(crp!557) kd05_1,kd05_2
	d_06: C4b(c2a,c4a!548,c4bp,d~0,i~0).C4a(c4b!548) -> C4a(c4b) + C4b(c2a,c4a,c4bp,d~0,i~0) fRate31() #Modifiers(PC_CRP_LF_C1)
	d_07: C2a(c2b!549,c4b).C2b(c2a!549) -> C2a(c2b,c4b) + C2b(c2a) fRate32() #Modifiers(PC_CRP_LF_C1)
	t_04: C4BP(c4b,crp) + CRP(c1,c4bp,lf!555,pc!550).LF(crp!555,glcnac).PC(crp!550) <-> CRP(c1,c4bp!558,lf!555,pc!550).LF(crp!555,glcnac).C4BP(c4b,crp!558).PC(crp!550) r34_k1_4,r34_k2
	e_05: CRP(c1,c4bp,lf!555,pc).GlcNac(lf!553,masp).LF(crp!555,glcnac!553) + MASP(GlcNac_LF_C1_MASP~0,glcnac) <-> CRP(c1,c4bp,lf!555,pc).GlcNac(lf!553,masp!556).LF(crp!555,glcnac!553).MASP(GlcNac_LF_C1_MASP~0,glcnac!556) ke05_1,ke05_2
	e_06: C4b(c2a,c4a!548,c4bp,d~0,i~0).C4a(c4b!548) -> C4a(c4b) + C4b(c2a,c4a,c4bp,d~0,i~0) fRate35() #Modifiers(GlcNac_LF_CRP_MASP)
	e_07: C2a(c2b!549,c4b).C2b(c2a!549) -> C2a(c2b,c4b) + C2b(c2a) fRate36() #Modifiers(GlcNac_LF_CRP_MASP)
	d_08: CRP(c1!557,c4bp,lf!555,pc!550).LF(crp!555,glcnac).PC(crp!550).C1(crp!557) + MASP(GlcNac_LF_C1_MASP~0,glcnac) <-> PC_CRP_LF_C1_MASP() kd08_1,kd08_2
	d_09: PC_CRP_LF_MASP() + C1(crp) <-> PC_CRP_LF_C1_MASP() kd09_1,kd09_2
	d_10: C4b(c2a,c4a!548,c4bp,d~0,i~0).C4a(c4b!548) -> C4a(c4b) + C4b(c2a,c4a,c4bp,d~0,i~0) fRate39() #Modifiers(PC_CRP_LF_C1_MASP)
	d_11: C2a(c2b!549,c4b).C2b(c2a!549) -> C2a(c2b,c4b) + C2b(c2a) fRate40() #Modifiers(PC_CRP_LF_C1_MASP)
	g_01: X(hf) + HF(x) <-> X(hf!554).HF(x!554) kg01_1,kg01_2
	g_02: X(hf!554).HF(x!554) + MASP(GlcNac_LF_C1_MASP~0,glcnac) <-> GlcNac_HF_MASP() kg02_1,kg02_2
	g_03: C4b(c2a,c4a!548,c4bp,d~0,i~0).C4a(c4b!548) -> C4a(c4b) + C4b(c2a,c4a,c4bp,d~0,i~0) fRate43() #Modifiers(GlcNac_HF_MASP)
	g_04: C2a(c2b!549,c4b).C2b(c2a!549) -> C2a(c2b,c4b) + C2b(c2a) fRate44() #Modifiers(GlcNac_HF_MASP)
end reaction rules
end model
