###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1102100003', 'http://identifiers.org/biomodels.db/BIOMD0000000309']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/12648679']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/131567']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0051098']
#@creatorEmail:'lukas@ebi.ac.uk'
#@creatorName:'Endler Lukas'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 4 molecules and 4 reactions. The translated model has 2 molecules and 4 rules'
###
begin model
begin parameters
	k0 1.0 #units:per_s
	k2 1.0 #units:per_M_per_s
	k3 0.5 #units:M_per_s
	J3 0.01 #units:dimensionless
	k4 1.0 #units:per_s
	J4 0.01 #units:dimensionless
	Et 1.0 #units:M
end parameters
begin molecule types
	#^ bqbiol:isVersionOf chebi:CHEBI:36080
	#^ bqbiol:hasProperty go:GO:0016301
	R()
	#^ bqbiol:isVersionOf chebi:CHEBI:36080
	E(p~P~0)
end molecule types
begin seed species
end seed species
begin observables
	Species R R() #R
	Species Ep E(p~P) #Ep
	Species E E(p~0) #E
end observables
begin functions
	E_ar() = 2*Et*J4*k3/(J3*R*k4 + J4*k3 + R*k4 - k3 + sqrt(-J4*k3*(4*R*k4 - 4*k3) + (J3*R*k4 + J4*k3 + R*k4 - k3)^2))
	Ep_ar() = -E_ar + Et
	Km4() = Et*J4
	Km3() = Et*J3
	fRate0() = E_ar*k0
	fRate1() = S*k2
	fRate2() = k3/(Ep_ar + Km3)
	fRate3() = R*k4/(E_ar + Km4)
end functions
begin reaction rules
	r0: 0  -> R() fRate0() #Modifiers(E)
	r2: R() -> 0  fRate1() #Modifiers(S)
	r3: E(p~P) -> E(p~0) fRate2()
	r4: E(p~0) -> E(p~P) fRate3() #Modifiers(R)
end reaction rules
end model
