###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1102020002', 'http://identifiers.org/biomodels.db/BIOMD0000000314']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/21127196']
#@BQB_HAS_PROPERTY:['http://identifiers.org/doid/DOID:8567']
#@BQB_HAS_PART:['http://identifiers.org/kegg.pathway/hsa04630', 'http://identifiers.org/reactome/REACT_22232']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_OCCURS_IN:['http://identifiers.org/bto/BTO:0004973']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0007259']
#@creatorEmail:'lukas@ebi.ac.uk'
#@creatorName:'Endler Lukas'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 12 molecules and 12 reactions. The translated model has 4 molecules and 12 rules'
###
begin model
begin parameters
	IL13stimulation 1.0 #units:ng_per_ml
	Kon_IL13Rec 0.00174087
	Rec_phosphorylation 9.07541
	pRec_intern 0.324132
	pRec_degradation 0.417538
	Rec_intern 0.259686
	Rec_recycle 0.0039243
	JAK2_phosphorylation 0.300019
	pJAK2_dephosphorylation 0.0981611
	STAT5_phosphorylation 0.00426767
	pSTAT5_dephosphorylation 0.0116389
	CD274mRNA_production 0.0115928
	SHP1 5.66068e+24 #original 9.4molecules/cell_volumes
end parameters
begin molecule types
	#^ bqbiol:is go:GO:0016516
	#^ bqbiol:hasPart uniprot:P29597
	#^ bqbiol:hasVersion uniprot:P78552, uniprot:P24394
	#^ bqbiol:hasProperty go:GO:0019973
	Rec(IL13_Rec~IL13_Rec~0,_i~_I~0,p_~P_~0)
	#^ bqbiol:isVersionOf uniprot:P51692, uniprot:P42229
	STAT5(p~P~0)
	#^ bqbiol:is chebi:CHEBI:33699
	#^ bqbiol:isVersionOf kegg.compound:C00046
	#^ bqbiol:encodes uniprot:P20963
	CD274mRNA()
	#^ bqbiol:isVersionOf uniprot:O60674
	JAK2(p~P~0)
end molecule types
begin seed species
	Rec(IL13_Rec~0,_i~0,p_~0) 1.08396e+24 # 1.8mol/L * 6.022e23/mol *1.0L #Rec #Rec
	Rec(IL13_Rec~0,_i~_I,p_~0) 7.14197156e+25 #original 118.598molecules/cell_volumes #Rec_i #Rec_i
	JAK2(p~0) 1.44528e+25 #original 24.0molecules/cell_volumes #JAK2 #JAK2
	STAT5(p~0) 1.2585980000000001e+26 #original 209.0molecules/cell_volumes #STAT5 #STAT5
end seed species
begin observables
	Species Rec Rec(IL13_Rec~0,_i~0,p_~0) #Rec
	Species Rec_i Rec(IL13_Rec~0,_i~_I,p_~0) #Rec_i
	Species IL13_Rec Rec(IL13_Rec~IL13_Rec,_i~0,p_~0) #IL13_Rec
	Species p_IL13_Rec Rec(IL13_Rec~IL13_Rec,_i~0,p_~P_) #p_IL13_Rec
	Species p_IL13_Rec_i Rec(IL13_Rec~IL13_Rec,_i~_I,p_~P_) #p_IL13_Rec_i
	Species JAK2 JAK2(p~0) #JAK2
	Species pJAK2 JAK2(p~P) #pJAK2
	Species STAT5 STAT5(p~0) #STAT5
	Species pSTAT5 STAT5(p~P) #pSTAT5
	Species CD274mRNA CD274mRNA() #CD274mRNA
end observables
begin functions
	IL13_ar() = 3.776*IL13stimulation
	fRate0() = IL13_ar*Kon_IL13Rec
	fRate3() = Rec_phosphorylation*pJAK2
	fRate4() = IL13_Rec*JAK2_phosphorylation
	fRate5() = JAK2_phosphorylation*p_IL13_Rec
	fRate8() = SHP1*pJAK2_dephosphorylation
	fRate9() = STAT5_phosphorylation*pJAK2
	fRate10() = SHP1*pSTAT5_dephosphorylation
	fRate11() = CD274mRNA_production*pSTAT5
end functions
begin reaction rules
	reaction_1: Rec(IL13_Rec~0,_i~0,p_~0) -> Rec(IL13_Rec~IL13_Rec,_i~0,p_~0) fRate0() #Modifiers(IL13)
	reaction_2: Rec(IL13_Rec~0,_i~0,p_~0) -> Rec(IL13_Rec~0,_i~_I,p_~0) Rec_intern
	reaction_3: Rec(IL13_Rec~0,_i~_I,p_~0) -> Rec(IL13_Rec~0,_i~0,p_~0) Rec_recycle
	reaction_4: Rec(IL13_Rec~IL13_Rec,_i~0,p_~0) -> Rec(IL13_Rec~IL13_Rec,_i~0,p_~P_) fRate3() #Modifiers(pJAK2)
	reaction_5: JAK2(p~0) -> JAK2(p~P) fRate4() #Modifiers(IL13_Rec)
	reaction_6: JAK2(p~0) -> JAK2(p~P) fRate5() #Modifiers(p_IL13_Rec)
	reaction_7: Rec(IL13_Rec~IL13_Rec,_i~0,p_~P_) -> Rec(IL13_Rec~IL13_Rec,_i~_I,p_~P_) pRec_intern
	reaction_8: Rec(IL13_Rec~IL13_Rec,_i~_I,p_~P_) -> 0  pRec_degradation
	reaction_9: JAK2(p~P) -> JAK2(p~0) fRate8() #Modifiers(SHP1)
	reaction_10: STAT5(p~0) -> STAT5(p~P) fRate9() #Modifiers(pJAK2)
	reaction_11: STAT5(p~P) -> STAT5(p~0) fRate10() #Modifiers(SHP1)
	reaction_12: 0  -> CD274mRNA() fRate11() #Modifiers(pSTAT5)
end reaction rules
end model
