###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1106060000', 'http://identifiers.org/biomodels.db/BIOMD0000000336']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/8083242']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0007596']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 18 molecules and 20 reactions. The translated model has 9 molecules and 21 rules'
###
begin model
begin parameters
	k1 20000000.0
	k2 20000000.0
	k3 10000000.0
	k4 20000000.0
	k5 10000000.0
	k6 100000000.0
	k7 10000000.0
	k8 400000000.0
	k9 0.005
	k10 0.4
	k11 0.3
	k12 1.15
	k13 8.2
	k14 32.0
	k15 100000.0
	k16 24.0
	k17 44.0
	k18 0.001
	k19 70.0
	k20 0.02
end parameters
begin molecule types
	#^ bqbiol:is uniprot:P00740
	IX(a~A~0,tf_viia,viii)
	#^ bqbiol:is uniprot:P00734
	II(a~A~0,m~M~0)
	#^ bqbiol:is uniprot:P12259
	V(a~A~0,x)
	#^ bqbiol:hasPart uniprot:P00734, uniprot:P12259, uniprot:P00742
	II_Va_Xa()
	#^ bqbiol:hasPart uniprot:P00742, uniprot:P00740, uniprot:P00451
	X_VIIIa_IXa()
	#^ bqbiol:is uniprot:P00451
	VIII(a~A~0,ix)
	#^ bqbiol:is uniprot:P00742
	X(a~A~0,tf_viia,v)
	#^ bqbiol:hasPart uniprot:P13726
	TF_VIIa(ix,x)
	I
end molecule types
begin seed species
	IX(a~0,tf_viia,viii) 5.4198e+16 # 9e-08mol/L * 6.022e23/mol *1.0L #IX #IX
	TF_VIIa(ix,x) 3011000000000000.0 #original 5e-09mol/L #TF_VIIa #TF_VIIa
	X(a~0,tf_viia,v) 1.02374e+17 #original 1.7e-07mol/L #X #X
	V(a~0,x) 1.2044e+16 #original 2e-08mol/L #V #V
	VIII(a~0,ix) 421540000000000.0 #original 7e-10mol/L #VIII #VIII
	II(a~0,m~0) 8.4308e+17 #original 1.4e-06mol/L #II #II
	I 0
end seed species
begin observables
	Species IX IX(a~0,tf_viia,viii) #IX
	Species IX_TF_VIIa IX(a~0,tf_viia!612,viii).TF_VIIa(ix!612,x) #IX_TF_VIIa
	Species TF_VIIa TF_VIIa(ix,x) #TF_VIIa
	Species IXa IX(a~A,tf_viia,viii) #IXa
	Species X X(a~0,tf_viia,v) #X
	Species X_TF_VIIa X(a~0,tf_viia!611,v).TF_VIIa(ix,x!611) #X_TF_VIIa
	Species Xa X(a~A,tf_viia,v) #Xa
	Species VIIIa_IXa IX(a~A,tf_viia,viii!610).VIII(a~A,ix!610) #VIIIa_IXa
	Species X_VIIIa_IXa X_VIIIa_IXa() #X_VIIIa_IXa
	Species V V(a~0,x) #V
	Species Va V(a~A,x) #Va
	Species VIII VIII(a~0,ix) #VIII
	Species VIIIa VIII(a~A,ix) #VIIIa
	Species IIa II(a~A,m~0) #IIa
	Species II II(a~0,m~0) #II
	Species II_Va_Xa II_Va_Xa() #II_Va_Xa
	Species Va_Xa X(a~A,tf_viia,v!609).V(a~A,x!609) #Va_Xa
	Species mIIa II(a~A,m~M) #mIIa
	Species I I
end observables
begin functions
	arRateI() = k20*(I - VIIIa_IXa - abs(I - VIIIa_IXa))
	IIa_plus_1_2mIIa() = IIa + 1.2*mIIa
	fRate19() = 1.0*I - 1.0*VIIIa_IXa + 1.0*abs(I - VIIIa_IXa)
end functions
begin reaction rules
	R1: IX(a~0,tf_viia,viii) + TF_VIIa(ix,x) <-> IX(a~0,tf_viia!612,viii).TF_VIIa(ix!612,x) k6,k16
	R1b: IX(a~0,tf_viia!612,viii).TF_VIIa(ix!612,x) -> TF_VIIa(ix,x) + IX(a~A,tf_viia,viii) k11
	R2: X(a~0,tf_viia,v) + TF_VIIa(ix,x) <-> X(a~0,tf_viia!611,v).TF_VIIa(ix,x!611) k6,k17
	R2b: X(a~0,tf_viia!611,v).TF_VIIa(ix,x!611) -> TF_VIIa(ix,x) + X(a~A,tf_viia,v) k12
	R3: X(a~0,tf_viia,v) + IX(a~A,tf_viia,viii!610).VIII(a~A,ix!610) <-> X_VIIIa_IXa() k6,k18
	R3b: X_VIIIa_IXa() -> IX(a~A,tf_viia,viii!610).VIII(a~A,ix!610) + X(a~A,tf_viia,v) k13
	R4: IX(a~0,tf_viia,viii) + X(a~A,tf_viia,v) -> X(a~A,tf_viia,v) + IX(a~A,tf_viia,viii) k15
	R5: V(a~0,x) + X(a~A,tf_viia,v) -> X(a~A,tf_viia,v) + V(a~A,x) k1
	R6: VIII(a~0,ix) + X(a~A,tf_viia,v) -> X(a~A,tf_viia,v) + VIII(a~A,ix) k3
	R7: V(a~0,x) + II(a~A,m~0) -> II(a~A,m~0) + V(a~A,x) k2
	R8: VIII(a~0,ix) + II(a~A,m~0) -> II(a~A,m~0) + VIII(a~A,ix) k4
	R9: II(a~0,m~0) + X(a~A,tf_viia,v!609).V(a~A,x!609) <-> II_Va_Xa() k6,k19
	R9b: II_Va_Xa() -> X(a~A,tf_viia,v!609).V(a~A,x!609) + II(a~A,m~M) k14
	R10: II(a~A,m~M) + X(a~A,tf_viia,v!609).V(a~A,x!609) -> X(a~A,tf_viia,v!609).V(a~A,x!609) + II(a~A,m~0) k5
	R11: VIII(a~A,ix) + IX(a~A,tf_viia,viii) <-> IX(a~A,tf_viia,viii!610).VIII(a~A,ix!610) k7,k9
	R12: V(a~A,x) + X(a~A,tf_viia,v) <-> X(a~A,tf_viia,v!609).V(a~A,x!609) k6,k10
	R7_atn: V(a~0,x) + II(a~A,m~M) -> II(a~A,m~M) + V(a~A,x) k2
	R8_atn: VIII(a~0,ix) + II(a~A,m~M) -> II(a~A,m~M) + VIII(a~A,ix) k4
	R4_atn: IX(a~0,tf_viia,viii) + X(a~A,tf_viia,v!609).V(a~A,x!609) -> X(a~A,tf_viia,v!609).V(a~A,x!609) + IX(a~A,tf_viia,viii) k15
	VIIIa_IXa_degradation_reactants_0: 0  -> IX(a~A,tf_viia,viii!610).VIII(a~A,ix!610) -1*(fRate19()) #Modifiers(VIIIa_IXa)
	0  -> I() arRateI #rateLaw
end reaction rules
end model
