###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000340', 'http://identifiers.org/biomodels.db/MODEL1107010002']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/19516255']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/biomodels.db/MODEL1109160001', 'http://identifiers.org/pubmed/16432308', 'http://identifiers.org/biomodels.db/MODEL1109160000', 'http://identifiers.org/biomodels.db/MODEL1108260015', 'http://identifiers.org/pubmed/18831981', 'http://identifiers.org/pubmed/12231555', 'http://identifiers.org/pubmed/9645916', 'http://identifiers.org/pubmed/8948060', 'http://identifiers.org/biomodels.db/BIOMD0000000365', 'http://identifiers.org/pubmed/7843644', 'http://identifiers.org/pubmed/2779263', 'http://identifiers.org/pubmed/12524220', 'http://identifiers.org/pubmed/15804855']
#@BQB_ENCODES:['http://identifiers.org/go/GO:0030193']
#@BQB_HAS_VERSION:['http://identifiers.org/doid/DOID:12259']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 54 molecules and 116 reactions. The translated model has 25 molecules and 120 rules'
###
begin model
begin parameters
	I_max 1.0
	IC50 0.34
	II0 1394.4
	VII0 10.0
	IX0 89.6
	X0 174.3
	PC0 60.0
	PS0 300.0
	VKH20 0.1
	d_II 0.01
	d_VII 0.12
	d_IX 0.029
	d_X 0.018
	d_PC 0.05
	d_PS 0.0165
	vitaminK_Vc 24.0
	d_VK2 0.0228
	VK0 1.0
	VKO0 0.1
	vitaminK_k12 0.0587
	heparin_ke 0.693
	warfarin_ka 1.0
	warfarin_Vd 10.0
	warfarin_CL 0.2
	d_XII 0.012
	d_VIII 0.058
	d_XI 0.1
	d_V 0.043
	d_Fg 0.032
	d_XIII 0.0036
	d_Pg 0.05
	d_Tmod 0.05
	d_TFPI 20.0
	d_Pk 0.05
	XII0 375.0
	VIII0 0.7
	XI0 30.6
	V0 26.7
	Fg0 8945.5
	XIII0 70.3
	Pg0 2154.3
	Tmod0 50.0
	TFPI0 2.5
	Pk0 450.0
	R1 0.140845070422535
	R2 1.0
	c45 0.85
	d_VK 0.2052
	warfarin_daily_dose 4.0
	heparin_infusion_duration_hr 24.0
	d_VKH2 (0.0228) * (1.0) / (0.1)
	d_VKO (0.0228) * (1.0) / (0.1)
	vitaminK_k21_Vc 0.0122 / (24.0)
	warfarin_ke (0.2) / (10.0)
	c44 (0.85) * (0.140845070422535)
	c46 (0.85) * (1.0)
	heparin_infusion 0
	heparin_bolus 0
	r1_v 50000.000000
	r1_k 0.000001
	r2_v 50.000000
	r2_k 1.000000
	r3_v 7.000000
	r3_k 10.000000
	r4_v 7.000000
	r4_k 1.000000
	r5_v 10.000000
	r5_k 10.000000
	r6_v 0.100000
	r6_k 10.000000
	r7_v 0.020000
	r7_k 10.000000
	r8_v 2.000000
	r8_k 0.100000
	r9_v 0.000000
	r9_k 10.000000
	r10_v 50000.000000
	r10_k 10.000000
	r11_v 50.000000
	r11_k 1.000000
	r12_v 100.000000
	r12_k 10.000000
	r13_v 9.000000
	r13_k 500.000000
	r14_v 20000.000000
	r14_k 0.500000
	r15_v 500.000000
	r15_k 500.000000
	r16_v 7.000000
	r16_k 10.000000
	r17_v 7.000000
	r17_k 10.000000
	r18_v 7.000000
	r18_k 100.000000
	r19_v 1.000000
	r19_k 1.000000
	r20_v 7.000000
	r20_k 1.000000
	r21_v 7.000000
	r21_k 5000.000000
	r22_v 5.000000
	r22_k 10000.000000
	r23_v 2.000000
	r23_k 1.000000
	r24_v 7.000000
	r24_k 1.000000
	r25_v 2.000000
	r25_k 1.000000
	r26_c 0.010000
	r27_c 0.500000
	r28_c 0.500000
	r29_c 0.500000
	r30_c 0.100000
	r31_c 0.500000
	r32_c 0.500000
	r33_v 70.000000
	r33_k 1.000000
	r34_v 900.000000
	r34_k 200.000000
	r35_v 70.000000
	r35_k 1.000000
	r36_v 1000.000000
	r36_k 1.000000
	r37_c 0.500000
	r38_v 1.000000
	r38_k 10.000000
	r39_v 1.000000
	r39_k 10.000000
	r40_v 0.200000
	r40_k 10.000000
	r41_v 7.000000
	r41_k 1.000000
	r42_v 70.000000
	r42_k 1.000000
	r43_v 7.000000
	r43_k 1.000000
	r56_k1 0.050000
	r57_k1 0.050000
	r59_k1 67.400000
	r60_k1 0.050000
	r62_k1 20.000000
	r64_k1 20.000000
	r66_k1 20.000000
	r68_k1 20.000000
	r70_k1 20.000000
	r72_k1 20.000000
	r74_k1 0.690000
	r76_k1 20.000000
	r78_k1 20.000000
	r80_k1 20.400000
	r82_k1 3.500000
	r83_k1 0.100000
	r85_k1 20.000000
	r86_k1 0.700000
	r87_k1 20.000000
	r88_k1 20.000000
	r89_k1 20.000000
	r91_k1 20.000000
	r92_k1 20.000000
	r93_k1 20.000000
	r94_k1 0.200000
	r95_k1 0.050000
	r96_k1 20.000000
	r103_k1 0.100000
end parameters
begin molecule types
	#^ bqbiol:is uniprot:P10646
	TFPI(x)
	A_warf()
	#^ bqbiol:is uniprot:P04070
	PC(a~A~0,ps)
	#^ bqbiol:hasPart uniprot:P00488, uniprot:P05160
	XIII(a~A~0)
	#^ bqbiol:is uniprot:P00742
	X(a~A~0,atiii_heparin,tfpi,v)
	#^ bqbiol:is uniprot:P08709
	VII(a~A~0,tf)
	#^ bqbiol:is uniprot:P00451
	VIII(a~A~0,ix)
	CA()
	#^ bqbiol:is uniprot:P12259
	V(a~A~0,x)
	#^ bqbiol:isVersionOf chebi:CHEBI:28384
	VKO(VKH2~VKH2~0)
	#^ bqbiol:is uniprot:P00748
	XII(a~A~0)
	D()
	#^ bqbiol:is chebi:CHEBI:28384
	VK(VK_p~VK_p~0)
	#^ bqbiol:hasPart uniprot:P02671, uniprot:P02679, uniprot:P02675
	F(FDP~FDP~0,XF~XF~0,g~G~0)
	#^ bqbiol:is uniprot:P00734
	II(TAT~TAT~0,a~A~0,atiii_heparin,tmod)
	#^ bqbiol:is uniprot:P07204
	Tmod(ii)
	#^ bqbiol:isVersionOf uniprot:P00747
	P(g~G~0)
	C_warf()
	#^ bqbiol:is uniprot:P07225
	PS(pc)
	#^ bqbiol:hasPart uniprot:P13726, uniprot:P00742, uniprot:P08709, uniprot:P10646
	VIIa_TF_Xa_TFPI()
	#^ bqbiol:isVersionOf uniprot:P03952
	K(Pk~Pk~0)
	#^ bqbiol:is uniprot:P00740
	IX(a~A~0,atiii_heparin,viii)
	#^ bqbiol:hasPart chebi:CHEBI:28304, uniprot:P01008
	ATIII_Heparin(ii,ix,x)
	#^ bqbiol:is uniprot:P13726
	TF(vii)
	#^ bqbiol:is uniprot:P03951
	XI(a~A~0)
end molecule types
begin seed species
	IX(a~0,atiii_heparin,viii) (89.6) #IX
	X(a~0,atiii_heparin,tfpi,v) (174.3) #X
	V(a~0,x) (26.7) #V
	II(TAT~0,a~0,atiii_heparin,tmod) (1394.4) #II
	F(FDP~0,XF~0,g~G) (8945.5) #Fg
	P(g~G) (2154.3) #Pg
	PC(a~0,ps) (60.0) #PC
	Tmod(ii) (50.0) #Tmod
	TFPI(x) (2.5) #TFPI
	PS(pc) (300.0) #PS
	XII(a~0) (375.0) #XII
	ATIII_Heparin(ii,ix,x) (0) #ATIII_Heparin
	VK(VK_p~0) (1.0) #VK
	VKO(VKH2~0) (0.1) #VKO
	K(Pk~Pk) (450.0) #Pk
	VK(VK_p~VK_p) (1.0) * (0.0587) / (0.000508333333333333) #VK_p
end seed species
begin observables
	Species IIa II(TAT~0,a~A,atiii_heparin,tmod) #IIa
	Species VIII VIII(a~0,ix) #VIII
	Species VIIIa VIII(a~A,ix) #VIIIa
	Species APC_PS PC(a~A,ps!613).PS(pc!613) #APC_PS
	Species IX IX(a~0,atiii_heparin,viii) #IX
	Species IXa IX(a~A,atiii_heparin,viii) #IXa
	Species XIa XI(a~A) #XIa
	Species XI XI(a~0) #XI
	Species XIIa XII(a~A) #XIIa
	Species VII VII(a~0,tf) #VII
	Species VIIa VII(a~A,tf) #VIIa
	Species X X(a~0,atiii_heparin,tfpi,v) #X
	Species Xa X(a~A,atiii_heparin,tfpi,v) #Xa
	Species IXa_VIIIa IX(a~A,atiii_heparin,viii!610).VIII(a~A,ix!610) #IXa_VIIIa
	Species V V(a~0,x) #V
	Species Va V(a~A,x) #Va
	Species II II(TAT~0,a~0,atiii_heparin,tmod) #II
	Species F F(FDP~0,XF~0,g~0) #F
	Species Fg F(FDP~0,XF~0,g~G) #Fg
	Species P P(g~0) #P
	Species XF F(FDP~0,XF~XF,g~0) #XF
	Species XIII XIII(a~0) #XIII
	Species Pg P(g~G) #Pg
	Species APC PC(a~A,ps) #APC
	Species IIa_Tmod II(TAT~0,a~A,atiii_heparin,tmod!614).Tmod(ii!614) #IIa_Tmod
	Species PC PC(a~0,ps) #PC
	Species Tmod Tmod(ii) #Tmod
	Species TF TF(vii) #TF
	Species VIIa_TF VII(a~A,tf!604).TF(vii!604) #VIIa_TF
	Species VII_TF VII(a~0,tf!604).TF(vii!604) #VII_TF
	Species Xa_TFPI X(a~A,atiii_heparin,tfpi!605,v).TFPI(x!605) #Xa_TFPI
	Species TFPI TFPI(x) #TFPI
	Species PS PS(pc) #PS
	Species VKH2 VKO(VKH2~VKH2) #VKH2
	Species Va_Xa X(a~A,atiii_heparin,tfpi,v!609).V(a~A,x!609) #Va_Xa
	Species CA CA() #CA
	Species XII XII(a~0) #XII
	Species K K(Pk~0) #K
	Species ATIII_Heparin ATIII_Heparin(ii,ix,x) #ATIII_Heparin
	Species Xa_ATIII_Heparin X(a~A,atiii_heparin!615,tfpi,v).ATIII_Heparin(ii,ix,x!615) #Xa_ATIII_Heparin
	Species VK VK(VK_p~0) #VK
	Species C_warf C_warf() #C_warf
	Species VKO VKO(VKH2~0) #VKO
	Species Pk K(Pk~Pk) #Pk
	Species FDP F(FDP~FDP,XF~0,g~G) #FDP
	Species D D() #D
	Species TAT II(TAT~TAT,a~A,atiii_heparin,tmod) #TAT
	Species VIIa_TF_Xa_TFPI VIIa_TF_Xa_TFPI() #VIIa_TF_Xa_TFPI
	Species XIIIa XIII(a~A) #XIIIa
	Species IIa_ATIII_Heparin II(TAT~0,a~A,atiii_heparin!616,tmod).ATIII_Heparin(ii!616,ix,x) #IIa_ATIII_Heparin
	Species IXa_ATIII_Heparin IX(a~A,atiii_heparin!617,viii).ATIII_Heparin(ii,ix!617,x) #IXa_ATIII_Heparin
	Species A_warf A_warf() #A_warf
	Species VK_p VK(VK_p~VK_p) #VK_p
end observables
begin functions
	arRateA_warf() = -A_warf*warfarin_ka
	arRateC_warf() = A_warf*warfarin_ka/warfarin_Vd - C_warf*warfarin_ke
	DP_ar() = D + FDP
	fRate0() = 50000.0*IIa/(IIa + 1.0e-6)
	fRate1() = 50.0*APC_PS/(APC_PS + 1.0)
	fRate2() = 7.0*XIa/(XIa + 10.0)
	fRate3() = 7.0*XIIa/(XIIa + 1.0)
	fRate4() = 10.0*IIa/(IIa + 10.0)
	fRate5() = 0.1*IIa/(IIa + 10.0)
	fRate6() = 0.02*IXa/(IXa + 10.0)
	fRate7() = 2.0*IXa_VIIIa/(IXa_VIIIa + 0.1)
	fRate8() = 1.0e-9*VIIa/(VIIa + 10.0)
	fRate9() = 50000.0*IIa/(IIa + 10.0)
	fRate10() = 50.0*APC_PS/(APC_PS + 1.0)
	fRate11() = 100.0*Va_Xa/(Va_Xa + 10.0)
	fRate12() = 9.0*Xa/(Xa + 500.0)
	fRate13() = 20000.0*IIa/(IIa + 0.5)
	fRate14() = 500.0*P/(P + 500.0)
	fRate15() = 7.0*XIIIa/(XIIIa + 10.0)
	fRate16() = 7.0*P/(P + 10.0)
	fRate17() = 7.0*P/(P + 100.0)
	fRate18() = 1.0*APC_PS/(APC_PS + 1.0)
	fRate19() = 7.0*IIa/(IIa + 1.0)
	fRate20() = 7.0*IIa/(IIa + 5000.0)
	fRate21() = 5.0*F/(F + 10000.0)
	fRate22() = 2.0*APC_PS/(APC_PS + 1.0)
	fRate23() = 7.0*IIa_Tmod/(IIa_Tmod + 1.0)
	fRate24() = 2.0*APC_PS/(APC_PS + 1.0)
	fRate25() = 100.0
	fRate26() = 2.0
	fRate27() = 2.0
	fRate28() = 2.0
	fRate29() = 10.0
	fRate30() = 2.0
	fRate31() = 2.0
	fRate32() = 70.0*Xa/(Xa + 1.0)
	fRate33() = 900.0*VIIa_TF/(VIIa_TF + 200.0)
	fRate34() = 70.0*VIIa_TF/(VIIa_TF + 1.0)
	fRate35() = 1000.0*TF/(TF + 1.0)
	fRate36() = 2.0
	fRate37() = 1.0*Xa/(Xa + 10.0)
	fRate38() = 1.0*VIIa_TF/(VIIa_TF + 10.0)
	fRate39() = 0.2*IXa/(IXa + 10.0)
	fRate40() = 7.0*CA/(CA + 1.0)
	fRate41() = 70.0*K/(K + 1.0)
	fRate42() = 7.0*XIIa/(XIIa + 1.0)
	fRate43() = 1/c44
	fRate44() = 1/c45
	fRate45() = 1/c46
	fRate46() = VK*d_VK2*(-C_warf*I_max/(C_warf + IC50) + 1)
	fRate47() = VKO*d_VKO*(-C_warf*I_max/(C_warf + IC50) + 1)
	fRate48() = II0*VKH2*d_II/VKH20
	fRate49() = VII0*VKH2*d_VII/VKH20
	fRate50() = IX0*VKH2*d_IX/VKH20
	fRate51() = VKH2*X0*d_X/VKH20
	fRate52() = PC0*VKH2*d_PC/VKH20
	fRate53() = PS0*VKH2*d_PS/VKH20
	fRate103() = XII0*d_XII
	fRate104() = VIII0*d_VIII
	fRate105() = XI0*d_XI
	fRate106() = V0*d_V
	fRate107() = Fg0*d_Fg
	fRate108() = XIII0*d_XIII
	fRate109() = Pg0*d_Pg
	fRate110() = Tmod0*d_Tmod
	fRate111() = TFPI0*d_TFPI
	fRate112() = Pk0*d_Pk
	fRate113() = VK0*d_VK
end functions
begin reaction rules
	r1_: VIII(a~0,ix) -> VIII(a~A,ix) fRate0() #Modifiers(IIa)
	r2_: VIII(a~A,ix) -> 0  fRate1() #Modifiers(APC_PS)
	r3_: IX(a~0,atiii_heparin,viii) -> IX(a~A,atiii_heparin,viii) fRate2() #Modifiers(XIa)
	r4_: XI(a~0) -> XI(a~A) fRate3() #Modifiers(XIIa)
	r5_: XI(a~0) -> XI(a~A) fRate4() #Modifiers(IIa)
	r6_: VII(a~0,tf) -> VII(a~A,tf) fRate5() #Modifiers(IIa)
	r7_: X(a~0,atiii_heparin,tfpi,v) -> X(a~A,atiii_heparin,tfpi,v) fRate6() #Modifiers(IXa)
	r8_: X(a~0,atiii_heparin,tfpi,v) -> X(a~A,atiii_heparin,tfpi,v) fRate7() #Modifiers(IXa_VIIIa)
	r9_: X(a~0,atiii_heparin,tfpi,v) -> X(a~A,atiii_heparin,tfpi,v) fRate8() #Modifiers(VIIa)
	r10: V(a~0,x) -> V(a~A,x) fRate9() #Modifiers(IIa)
	r11: V(a~A,x) -> 0  fRate10() #Modifiers(APC_PS)
	r12: II(TAT~0,a~0,atiii_heparin,tmod) -> II(TAT~0,a~A,atiii_heparin,tmod) fRate11() #Modifiers(Va_Xa)
	r13: II(TAT~0,a~0,atiii_heparin,tmod) -> II(TAT~0,a~A,atiii_heparin,tmod) fRate12() #Modifiers(Xa)
	r14: F(FDP~0,XF~0,g~G) -> F(FDP~0,XF~0,g~0) fRate13() #Modifiers(IIa)
	r15: F(FDP~0,XF~0,g~G) -> F(FDP~FDP,XF~0,g~G) fRate14() #Modifiers(P)
	r16: F(FDP~0,XF~0,g~0) -> F(FDP~0,XF~XF,g~0) fRate15() #Modifiers(XIIIa)
	r17: F(FDP~0,XF~0,g~0) -> F(FDP~FDP,XF~0,g~G) fRate16() #Modifiers(P)
	r18: F(FDP~0,XF~XF,g~0) -> D() fRate17() #Modifiers(P)
	r19: F(FDP~0,XF~XF,g~0) -> D() fRate18() #Modifiers(APC_PS)
	r20: XIII(a~0) -> XIII(a~A) fRate19() #Modifiers(IIa)
	r21: P(g~G) -> P(g~0) fRate20() #Modifiers(IIa)
	r22: P(g~G) -> P(g~0) fRate21() #Modifiers(F)
	r23: P(g~G) -> P(g~0) fRate22() #Modifiers(APC_PS)
	r24: PC(a~0,ps) -> PC(a~A,ps) fRate23() #Modifiers(IIa_Tmod)
	r25: X(a~A,atiii_heparin,tfpi,v!609).V(a~A,x!609) -> 0  fRate24() #Modifiers(APC_PS)
	r26: IX(a~A,atiii_heparin,viii) + VIII(a~A,ix) -> IX(a~A,atiii_heparin,viii!610).VIII(a~A,ix!610) fRate25()
	r27: V(a~A,x) + X(a~A,atiii_heparin,tfpi,v) -> X(a~A,atiii_heparin,tfpi,v!609).V(a~A,x!609) fRate26()
	r28: II(TAT~0,a~A,atiii_heparin,tmod) + Tmod(ii) -> II(TAT~0,a~A,atiii_heparin,tmod!614).Tmod(ii!614) fRate27()
	r29: VII(a~A,tf) + TF(vii) -> VII(a~A,tf!604).TF(vii!604) fRate28()
	r30: VII(a~0,tf) + TF(vii) -> VII(a~0,tf!604).TF(vii!604) fRate29()
	r31: VII(a~A,tf!604).TF(vii!604) + X(a~A,atiii_heparin,tfpi!605,v).TFPI(x!605) -> VIIa_TF_Xa_TFPI() fRate30()
	r32: X(a~A,atiii_heparin,tfpi,v) + TFPI(x) -> X(a~A,atiii_heparin,tfpi!605,v).TFPI(x!605) fRate31()
	r33: VII(a~0,tf!604).TF(vii!604) -> VII(a~A,tf!604).TF(vii!604) fRate32() #Modifiers(Xa)
	r34: X(a~0,atiii_heparin,tfpi,v) -> X(a~A,atiii_heparin,tfpi,v) fRate33() #Modifiers(VIIa_TF)
	r35: IX(a~0,atiii_heparin,viii) -> IX(a~A,atiii_heparin,viii) fRate34() #Modifiers(VIIa_TF)
	r36: VII(a~0,tf!604).TF(vii!604) -> VII(a~A,tf!604).TF(vii!604) fRate35() #Modifiers(TF)
	r37: PC(a~A,ps) + PS(pc) -> PC(a~A,ps!613).PS(pc!613) fRate36()
	r38: VII(a~0,tf) -> VII(a~A,tf) fRate37() #Modifiers(Xa)
	r39: VII(a~0,tf) -> VII(a~A,tf) fRate38() #Modifiers(VIIa_TF)
	r40: VII(a~0,tf) -> VII(a~A,tf) fRate39() #Modifiers(IXa)
	r41: XII(a~0) -> XII(a~A) fRate40() #Modifiers(CA)
	r42: XII(a~0) -> XII(a~A) fRate41() #Modifiers(K)
	r43: K(Pk~Pk) -> K(Pk~0) fRate42() #Modifiers(XIIa)
	r44: II(TAT~0,a~A,atiii_heparin,tmod) + ATIII_Heparin(ii,ix,x) -> II(TAT~0,a~A,atiii_heparin!616,tmod).ATIII_Heparin(ii!616,ix,x) fRate43()
	r45: X(a~A,atiii_heparin,tfpi,v) + ATIII_Heparin(ii,ix,x) -> X(a~A,atiii_heparin!615,tfpi,v).ATIII_Heparin(ii,ix,x!615) fRate44()
	r46: IX(a~A,atiii_heparin,viii) + ATIII_Heparin(ii,ix,x) -> IX(a~A,atiii_heparin!617,viii).ATIII_Heparin(ii,ix!617,x) fRate45()
	r47_reactants_0: 0  -> VK(VK_p~0) -1*(fRate46()) #Modifiers(C_warf)
	r47_products_0: 0  -> VKO(VKH2~VKH2) fRate46() #Modifiers(C_warf)
	r48_reactants_0: 0  -> VKO(VKH2~0) -1*(fRate47()) #Modifiers(C_warf)
	r48_products_0: 0  -> VK(VK_p~0) fRate47() #Modifiers(C_warf)
	pII_VKH2: 0  -> II(TAT~0,a~0,atiii_heparin,tmod) fRate48() #Modifiers(VKH2)
	pVII_VKH2: 0  -> VII(a~0,tf) fRate49() #Modifiers(VKH2)
	pIX_VKH2: 0  -> IX(a~0,atiii_heparin,viii) fRate50() #Modifiers(VKH2)
	pX_VKH2: 0  -> X(a~0,atiii_heparin,tfpi,v) fRate51() #Modifiers(VKH2)
	pPC_VKH2: 0  -> PC(a~0,ps) fRate52() #Modifiers(VKH2)
	pPS_VKH2: 0  -> PS(pc) fRate53() #Modifiers(VKH2)
	dFg: F(FDP~0,XF~0,g~G) -> F(FDP~FDP,XF~0,g~G) d_Fg
	dF: F(FDP~0,XF~0,g~0) -> F(FDP~FDP,XF~0,g~G) r56_k1
	dXF: F(FDP~0,XF~XF,g~0) -> D() r57_k1
	dII: II(TAT~0,a~0,atiii_heparin,tmod) -> 0  d_II
	dIIa: II(TAT~0,a~A,atiii_heparin,tmod) -> II(TAT~TAT,a~A,atiii_heparin,tmod) r59_k1
	dTF: TF(vii) -> 0  r60_k1
	dV: V(a~0,x) -> 0  d_V
	dVa: V(a~A,x) -> 0  r62_k1
	dVII: VII(a~0,tf) -> 0  d_VII
	dVIIa: VII(a~A,tf) -> 0  r64_k1
	dVIII: VIII(a~0,ix) -> 0  d_VIII
	dVIIIa: VIII(a~A,ix) -> 0  r66_k1
	dX: X(a~0,atiii_heparin,tfpi,v) -> 0  d_X
	dXa: X(a~A,atiii_heparin,tfpi,v) -> 0  r68_k1
	dIX: IX(a~0,atiii_heparin,viii) -> 0  d_IX
	dIXa: IX(a~A,atiii_heparin,viii) -> 0  r70_k1
	dXII: XII(a~0) -> 0  d_XII
	dXIIa: XII(a~A) -> 0  r72_k1
	dXIII: XIII(a~0) -> 0  d_XIII
	dXIIIa: XIII(a~A) -> 0  r74_k1
	dPk: K(Pk~Pk) -> 0  d_Pk
	dK: K(Pk~0) -> 0  r76_k1
	dPg: P(g~G) -> 0  d_Pg
	dP: P(g~0) -> 0  r78_k1
	dPC: PC(a~0,ps) -> 0  d_PC
	dAPC: PC(a~A,ps) -> 0  r80_k1
	dPS: PS(pc) -> 0  d_PS
	dFDP: F(FDP~FDP,XF~0,g~G) -> 0  r82_k1
	dD: D() -> 0  r83_k1
	dTFPI: TFPI(x) -> 0  d_TFPI
	dVIIa_TF: VII(a~A,tf!604).TF(vii!604) -> 0  r85_k1
	dVII_TF: VII(a~0,tf!604).TF(vii!604) -> 0  r86_k1
	dAPC_PS: PC(a~A,ps!613).PS(pc!613) -> 0  r87_k1
	dVa_Xa: X(a~A,atiii_heparin,tfpi,v!609).V(a~A,x!609) -> 0  r88_k1
	dIXa_VIIIa: IX(a~A,atiii_heparin,viii!610).VIII(a~A,ix!610) -> 0  r89_k1
	dTmod: Tmod(ii) -> 0  d_Tmod
	dIIa_Tmod: II(TAT~0,a~A,atiii_heparin,tmod!614).Tmod(ii!614) -> 0  r91_k1
	dXa_TFPI: X(a~A,atiii_heparin,tfpi!605,v).TFPI(x!605) -> 0  r92_k1
	dVIIa_TF_Xa_TFPI: VIIa_TF_Xa_TFPI() -> 0  r93_k1
	dTAT: II(TAT~TAT,a~A,atiii_heparin,tmod) -> 0  r94_k1
	dCA: CA() -> 0  r95_k1
	dXIa: XI(a~A) -> 0  r96_k1
	dVKH2: VKO(VKH2~VKH2) -> VKO(VKH2~0) d_VKH2
	VK_transport: VK(VK_p~0) <-> VK(VK_p~VK_p) vitaminK_k12,vitaminK_k21_Vc
	eHeparin: ATIII_Heparin(ii,ix,x) -> 0  heparin_ke
	eHeparinXa: X(a~A,atiii_heparin!615,tfpi,v).ATIII_Heparin(ii,ix,x!615) -> 0  heparin_ke
	eHeparinIXa: IX(a~A,atiii_heparin!617,viii).ATIII_Heparin(ii,ix!617,x) -> 0  heparin_ke
	eHeparinIIa: II(TAT~0,a~A,atiii_heparin!616,tmod).ATIII_Heparin(ii!616,ix,x) -> 0  heparin_ke
	dXI: XI(a~0) -> 0  r103_k1
	pXII: 0  -> XII(a~0) fRate103()
	pVIII: 0  -> VIII(a~0,ix) fRate104()
	pXI: 0  -> XI(a~0) fRate105()
	pV: 0  -> V(a~0,x) fRate106()
	pFg: 0  -> F(FDP~0,XF~0,g~G) fRate107()
	pXIII: 0  -> XIII(a~0) fRate108()
	pPg: 0  -> P(g~G) fRate109()
	pTmod: 0  -> Tmod(ii) fRate110()
	pTFPI: 0  -> TFPI(x) fRate111()
	pPk: 0  -> K(Pk~Pk) fRate112()
	pVK: 0  -> VK(VK_p~0) fRate113()
	dVK: VK(VK_p~0) -> 0  d_VK
	pHeparin: 0  -> ATIII_Heparin(ii,ix,x) heparin_infusion
	0  -> C_warf() arRateC_warf #rateLaw
	0  -> A_warf() arRateA_warf #rateLaw
end reaction rules
end model
