###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000346', 'http://identifiers.org/biomodels.db/MODEL0911929415']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/19431309']
#@BQB_HAS_TAXON:['http://identifiers.org/obo.bto/BTO:0000925', 'http://identifiers.org/taxonomy/131567']
#@BQB_IS_VERSION_OF:['http://identifiers.org/obo.go/GO:0019226']
#@creatorEmail:'lenov@ebi.ac.uk'
#@creatorName:'Le Novère Nicolas'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 2 molecules and 0 reactions. The translated model has 2 molecules and 2 rules'
###
begin model
begin parameters
	a 0.7 #units:dimensionless
	b 0.8 #units:dimensionless
	c 3.0 #units:dimensionless
	z -0.4 #units:dimensionless
end parameters
begin molecule types
	y()
	x()
end molecule types
begin seed species
	y() 3.011e+23 # 0.5mol/L * 6.022e23/mol *1.0L #y #y
end seed species
begin observables
	Species x x() #x
	Species y y() #y
end observables
begin functions
	arRatey() = (a - b*y - x)/c
	arRatex() = c*(-x^3/3 + x + y + z)
end functions
begin reaction rules
	0  -> x() arRatex #rateLaw
	0  -> y() arRatey #rateLaw
end reaction rules
end model
