###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1108090000', 'http://identifiers.org/biomodels.db/BIOMD0000000348']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/20497556']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/pubmed/9575814', 'http://identifiers.org/pubmed/9575813']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_OCCURS_IN:['http://identifiers.org/bto/BTO:0000783']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0061178', 'http://identifiers.org/go/GO:0044342']
#@BQB_HAS_PROPERTY:['http://identifiers.org/doid/DOID:9351']
#@creatorEmail:'ajmera@ebi.ac.uk'
#@creatorName:'Ajmera Ishan'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 7 molecules and 0 reactions. The translated model has 7 molecules and 7 rules'
###
begin model
begin parameters
	ai 0.341
	am 0.2
	Ao 4000.0
	ATP_init 3700.0
	Cac_init 0.1
	Cam_init 0.2
	CaR 0.09
	Cmit 5200.0
	F 96480.0
	fi 0.01
	fm 0.0003
	G3P_init 30.0
	Glu 8.0
	hCa 4.0
	hgl 1.7
	hp 8.0
	kACa 0.25
	KAD 25.0
	kat -0.00492
	kATP 4e-05
	kATPCa 9e-05
	kbt -0.00443
	kCaA 30.0
	KCaj 8.0
	KCam 0.05
	KgNc 0.09
	kgpd 1e-05
	Klnc 1.0
	klp 0.0305
	Kmadp 20.0
	KmATP 500.0
	Kmg3p 200.0
	Kmgl 7.0
	KmLD 47.5
	KmNh 3000.0
	Kmph 131.4
	Kmpyr 47.5
	knadhc 0.0001
	knadhm 0.0001
	KNaj 8000.0
	KpCam 0.165
	KPNm 81.0
	KTNc 0.002
	KTNm 16.78
	NADHc_init 10.0
	NADHm_init 50.0
	Nam 5000.0
	Ni 10000.0
	Ntc 2000.0
	Ntm 2200.0
	PCa 0.004
	Plb 0.0012
	Plr 0.0012
	PYR_init 10.0
	Tnadh 0.05
	Tv 26.73
	u1 1.5
	u2 1.1
	Vi 0.53
	Vm_init 100.0
	Vme 22.0
	Vmglu 0.011
	Vmgpd 0.5
	Vmldh 1.2
	Vmmit 0.0144
	Vmnc 0.025
	Vmpdh 0.3
	Vmph 8.0
	ZCa 2.0
end parameters
begin molecule types
	Cam()
	Vm()
	G3P()
	NADHm()
	NADHc()
	PYR()
	ATP()
end molecule types
begin seed species
	G3P()() (30.0) #G3P
	PYR()() (10.0) #PYR
	ATP()() (3700.0) #ATP
	NADHm()() (50.0) #NADHm
	NADHc()() (10.0) #NADHc
	Vm()() (100.0) #Vm
	Cam()() (0.2) #Cam
end seed species
begin observables
	Species G3P G3P() #G3P
	Species PYR PYR() #PYR
	Species ATP ATP() #ATP
	Species NADHm NADHm() #NADHm
	Species NADHc NADHc() #NADHc
	Species Vm Vm() #Vm
	Species Cam Cam() #Cam
end observables
begin functions
	Jhl() = (Plb + Plr)*exp(Vm*klp)
	FTe() = (Vm*kat + 1)/(Vm*kbt + 1)
	FDe() = NADHm/(KmNh + NADHm)
	Jhres() = FDe*FTe*Vme
	ACa() = 1 - 1/exp(Cam/KpCam)
	ADP() = -ATP + Ao
	MgADP() = 0.055*ADP
	AD() = MgADP^2/(Kmadp^2 + MgADP^2)
	AT() = Vm^hp/(Kmph^hp + Vm^hp)
	Jph() = ACa*AD*AT*Vmph
	Cac() = CaR + kACa*(ATP/ADP)^hCa/(KAD^hCa + (ATP/ADP)^hCa)
	DelJNCa() = Cac/KCaj + Cac*Nam^3/(KCaj*KNaj^3) + Cam/KCaj + Cam*Ni^3/(KCaj*KNaj^3) + 1 + Nam^3/KNaj^3 + Ni^3/KNaj^3
	JNCa() = Vmnc*(-exp(-0.5*Cac*Nam^3*Vm/(KCaj*KNaj^3*Tv)) + exp(0.5*Cam*Ni^3*Vm/(KCaj*KNaj^3*Tv)))/DelJNCa
	Juni() = PCa*Vm*ZCa*(-Cac*ai + Cam*am*exp(-Vm*ZCa/Tv))/(Tv*(exp(-Vm*ZCa/Tv) - 1))
	arRateVm() = F*(-JNCa - Jhl + Jhres - Jph - 2*Juni)/Cmit
	NADm() = -NADHm + Ntm
	NADc() = -NADHc + Ntc
	FNADc() = NADHc/(NADc*(KTNc + NADHc/NADc))
	Jtnadh() = FNADc*NADm*Tnadh/(NADHm*(KTNm + NADm/NADHm))
	FLNADc() = NADHc/(NADc*(Klnc + NADHc/NADc))
	JLDH() = FLNADc*PYR*Vmldh/(KmLD + PYR)
	Jgpd() = G3P*NADc*Vmgpd/(NADHc*(G3P + Kmg3p)*(KgNc + NADc/NADHc))
	arRateNADHc() = -NADHc*knadhc + (-JLDH + Jgpd - Jtnadh)/Vi
	FPYR() = PYR/(Kmpyr + PYR)
	FPNAD() = NADm/(NADHm*(KPNm + NADm/NADHm))
	FPCa() = 1/(u2*(u1/(Cam/KCam + 1)^2 + 1) + 1)
	JPYR() = FPCa*FPNAD*FPYR*Vmpdh
	arRateNADHm() = -NADHm*knadhm + (4.6*JPYR - 0.1*Jhres + Jtnadh)/Vmmit
	JGlu() = ATP*Glu^hgl*Vmglu/((ATP + KmATP)*(Glu^hgl + Kmgl^hgl))
	arRateATP() = -ATP*(Cac*kATPCa + kATP) + (2*JGlu + 0.231*Jph)/Vi
	arRatePYR() = (-JLDH - JPYR + Jgpd)/(Vi + Vmmit)
	arRateCam() = fm*(-JNCa + Juni)/Vmmit
	arRateG3P() = -G3P*kgpd + (2*JGlu - Jgpd)/Vi
	ID() = ATP/ADP
	JO2() = 0.1*Jhres
end functions
begin reaction rules
	0  -> G3P() arRateG3P #rateLaw
	0  -> PYR() arRatePYR #rateLaw
	0  -> ATP() arRateATP #rateLaw
	0  -> NADHm() arRateNADHm #rateLaw
	0  -> NADHc() arRateNADHc #rateLaw
	0  -> Vm() arRateVm #rateLaw
	0  -> Cam() arRateCam #rateLaw
end reaction rules
end model
