###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000350', 'http://identifiers.org/biomodels.db/MODEL1107230000']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/21219507']
#@BQB_IS_VERSION_OF:['http://identifiers.org/kegg.pathway/map04710', 'http://identifiers.org/go/GO:0042752']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/70448']
#@creatorEmail:'andrew.millar@ed.ac.uk'
#@creatorName:'Millar Andrew J'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 14 molecules and 30 reactions. The translated model has 13 molecules and 32 rules'
###
begin model
begin parameters
	D_luc 0.182881217463259
	D_mrna_luc 1.0
	acc_rate 0.0820132250303287
	R_toc1_cca1 1.08706126858966
	H_toc1_cca1 2.07807738692343
	L_toc1 0.0001
	R_toc1_acc 0.231107032949407
	D_mrna_toc1 0.29213049778373
	T_toc1 0.769970172977886
	Di_toc1_12_l 0.136490583368648
	Di_toc1_12_d 0.326619492089715
	D_toc1_2_l 0.461550559180802
	D_toc1_2_d 0.356613920551118
	H_cca1_toc1 2.5007062880634
	R_cca1_toc1_2_l 3.27520292103832
	R_cca1_toc1_2_d 1.38563901682266
	D_mrna_cca1 1.33082080954527
	T_cca1 4.90486610428652
	Di_cca1_cn 10.0
	D_cca1_l 0.424177877449438
	D_cca1_d 0.269380178154091
	effcopies_cca1_LHY7 1.13965755508623
	effcopies_toc1_TOC8 1.0
	parameter_1 1.0
	parameter_2 0
	parameter_3 0
	parameter_4 0
	parameter_5 0
end parameters
begin molecule types
	#^ bqbiol:isVersionOf chebi:CHEBI:33699
	luc_mrna()
	#^ bqbiol:isVersionOf chebi:CHEBI:33699
	cca1_mrna()
	#^ bqbiol:isHomologTo chebi:CHEBI:33699
	toc1_mrna()
	#^ bqbiol:isVersionOf chebi:CHEBI:33699
	cca1luc_mrna()
	#^ bqbiol:isVersionOf uniprot:P92973
	cca1luc()
	#^ bqbiol:isVersionOf chebi:CHEBI:25078
	luc()
	cca1(_c~_C~0,_n~_N~0)
	#^ bqbiol:isVersionOf uniprot:Q9LKL2
	toc1_2()
	acc()
	#^ bqbiol:isVersionOf uniprot:Q9LKL2
	toc1_1()
	#^ bqbiol:isVersionOf uniprot:Q9LKL2
	toc1luc_2()
	#^ bqbiol:hasPart uniprot:Q9LKL2
	toc1luc_1()
	#^ bqbiol:isVersionOf chebi:CHEBI:33699
	toc1luc_mrna()
end molecule types
begin seed species
	acc() 163838971947291.2 # (0.272067372878265 * 1e-09)mol/L * 6.022e23/mol *1.0L #acc #acc
	toc1_mrna() 23224763022068.035 #original 0.0385665277682963/L #toc1_mrna #toc1_mrna
	toc1_1() 124367111270604.12 #original 0.206521274112594/L #toc1_1 #toc1_1
	toc1_2() 188315107189198.7 #original 0.312711901675853/L #toc1_2 #toc1_2
	cca1_mrna() 62963409699517.41 #original 0.104555645465821/L #cca1_mrna #cca1_mrna
	cca1(_c~_C,_n~0) 30902149831733.613 #original 0.051315426489096/L #cca1_c #cca1_c
	cca1(_c~0,_n~_N) 1850462828171579.8 #original 3.07283764226433/L #cca1_n #cca1_n
end seed species
begin observables
	Species acc acc() #acc
	Species toc1_mrna toc1_mrna() #toc1_mrna
	Species toc1_1 toc1_1() #toc1_1
	Species toc1_2 toc1_2() #toc1_2
	Species cca1_mrna cca1_mrna() #cca1_mrna
	Species cca1_c cca1(_c~_C,_n~0) #cca1_c
	Species cca1_n cca1(_c~0,_n~_N) #cca1_n
	Species toc1luc_mrna toc1luc_mrna() #toc1luc_mrna
	Species toc1luc_1 toc1luc_1() #toc1luc_1
	Species toc1luc_2 toc1luc_2() #toc1luc_2
	Species cca1luc_mrna cca1luc_mrna() #cca1luc_mrna
	Species cca1luc cca1luc() #cca1luc
	Species luc_mrna luc_mrna() #luc_mrna
	Species luc luc() #luc
end observables
begin functions
	toc1luc() = toc1luc_1 + toc1luc_2
	fRate0() = acc_rate*min(rint(sin(261799387791667*time()/1000000000000000)/2 + 1/2), rint(sin(261799387791667*time()/1000000000000000)/2 + 1))
	fRate3() = 1
	fRate5() = toc1_1*(Di_toc1_12_d*(1 - min(rint(sin(0.261799387791667*time())/2 + 0.5), rint(sin(0.261799387791667*time())/2 + 1))) + Di_toc1_12_l*min(rint(sin(0.261799387791667*time())/2 + 0.5), rint(sin(0.261799387791667*time())/2 + 1)))
	fRate11() = 1
	fRate12() = 1
	fRate20() = toc1luc_1*(Di_toc1_12_d*(1 - min(rint(sin(0.261799387791667*time())/2 + 0.5), rint(sin(0.261799387791667*time())/2 + 1))) + Di_toc1_12_l*min(rint(sin(0.261799387791667*time())/2 + 0.5), rint(sin(0.261799387791667*time())/2 + 1)))
	fRate21() = 1
	fRate28() = 1
end functions
begin reaction rules
	reaction_1: 0  -> acc() fRate0()
	reaction_2: acc() -> 0  acc_rate
	reaction_3: 0  -> toc1_mrna() 1.00000000000000 #Modifiers(acc, cca1_n)
	reaction_4_reactants_0: 0  -> toc1_2() -1*(fRate3())
	reaction_5: 0  -> toc1_1() 1.00000000000000 #Modifiers(toc1_mrna)
	reaction_6_reactants_0: 0  -> toc1_1() -1*(fRate5())
	reaction_6_products_0: 0  -> toc1_2() fRate5()
	reaction_7: toc1_mrna() -> 0  D_mrna_toc1
	reaction_8: 0  -> cca1_mrna() 1.00000000000000 #Modifiers(toc1_2)
	reaction_9: cca1_mrna() -> 0  D_mrna_cca1
	reaction_10: 0  -> cca1(_c~_C,_n~0) 1.00000000000000 #Modifiers(cca1_mrna)
	reaction_11: cca1(_c~_C,_n~0) -> cca1(_c~0,_n~_N) Di_cca1_cn
	reaction_12_reactants_0: 0  -> cca1(_c~_C,_n~0) -1*(fRate11())
	reaction_13_reactants_0: 0  -> cca1(_c~0,_n~_N) -1*(fRate12())
	reaction_14: 0  -> luc_mrna() parameter_3 #Modifiers(acc, cca1_n)
	reaction_15: luc_mrna() -> 0  D_mrna_luc
	reaction_16: 0  -> luc() 1.00000000000000 #Modifiers(luc_mrna)
	reaction_17: luc() -> 0  D_luc
	reaction_18: 0  -> toc1luc_mrna() parameter_2 #Modifiers(acc, cca1_n)
	reaction_19: toc1luc_mrna() -> 0  D_mrna_toc1
	reaction_20: 0  -> toc1luc_1() 1.00000000000000 #Modifiers(toc1luc_mrna)
	reaction_21_reactants_0: 0  -> toc1luc_1() -1*(fRate20())
	reaction_21_products_0: 0  -> toc1luc_2() fRate20()
	reaction_22_reactants_0: 0  -> toc1luc_2() -1*(fRate21())
	reaction_23: toc1luc_1() -> 0  D_luc
	reaction_24: toc1luc_2() -> 0  D_luc
	reaction_25: 0  -> luc_mrna() parameter_5 #Modifiers(toc1_2)
	reaction_26: 0  -> cca1luc_mrna() parameter_4 #Modifiers(toc1_2)
	reaction_27: cca1luc_mrna() -> 0  D_mrna_cca1
	reaction_28: 0  -> cca1luc() 1.00000000000000 #Modifiers(cca1luc_mrna)
	reaction_30_reactants_0: 0  -> cca1luc() -1*(fRate28())
	reaction_32: cca1luc() -> 0  D_luc
end reaction rules
end model
