###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1108260008', 'http://identifiers.org/biomodels.db/BIOMD0000000359']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/11985578']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/pubmed/9468488']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0007596']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/2759']
#@creatorEmail:'schubert@ebi.ac.uk'
#@creatorName:'Schubert Michael'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 9 molecules and 8 reactions. The translated model has 4 molecules and 8 rules'
###
begin model
begin parameters
	r1_k1 5.000000
	r1_k2 770.000000
	r2_k1 420.000000
	r3_k1 770.000000
	r3_k2 5.000000
	r4_k1 0.054000
	r4_k2 0.020000
	r5_k1 0.440000
	r5_k2 0.000000
	r6_k1 6.000000
	r6_k2 0.020000
	r7_k1 0.000000
	r7_k2 0.000000
	r8_k1 20.000000
	r8_k2 0.000000
end parameters
begin molecule types
	#^ bqbiol:hasPart uniprot:P13726, uniprot:P08709
	VIIa_TF(x)
	VIIa_TF_Xa_TFPI()
	#^ bqbiol:is uniprot:P00742
	X(a~A~0,tfpi,viia_tf)
	#^ bqbiol:is uniprot:P10646
	TFPI(x)
end molecule types
begin seed species
	VIIa_TF(x) 602200000000000.1 # (1.0 * 1e-09)mol/L * 6.022e23/mol *1.0L #VIIa_TF #VIIa_TF
	X(a~0,tfpi,viia_tf) 1.0237400000000002e+17 #original 170.0substance/L  #X #X
	TFPI(x) 1445280000000000.0 #original 2.4substance/L  #TFPI #TFPI
end seed species
begin observables
	Species VIIa_TF VIIa_TF(x) #VIIa_TF
	Species X X(a~0,tfpi,viia_tf) #X
	Species VIIa_TF_X X(a~0,tfpi,viia_tf!637).VIIa_TF(x!637) #VIIa_TF_X
	Species VIIa_TF_Xa X(a~A,tfpi,viia_tf!637).VIIa_TF(x!637) #VIIa_TF_Xa
	Species Xa X(a~A,tfpi,viia_tf) #Xa
	Species TFPI TFPI(x) #TFPI
	Species Xa_TFPI X(a~A,tfpi!605,viia_tf).TFPI(x!605) #Xa_TFPI
	Species Xa_TFPI_VIIa_TF X(a~A,tfpi!605,viia_tf!637).TFPI(x!605).VIIa_TF(x!637) #Xa_TFPI_VIIa_TF
	Species VIIa_TF_Xa_TFPI VIIa_TF_Xa_TFPI() #VIIa_TF_Xa_TFPI
end observables
begin reaction rules
	reaction_1: X(a~0,tfpi,viia_tf) + VIIa_TF(x) <-> X(a~0,tfpi,viia_tf!637).VIIa_TF(x!637) r1_k1,r1_k2
	reaction_2: X(a~0,tfpi,viia_tf!637).VIIa_TF(x!637) -> X(a~A,tfpi,viia_tf!637).VIIa_TF(x!637) r2_k1
	reaction_3: X(a~A,tfpi,viia_tf!637).VIIa_TF(x!637) <-> X(a~A,tfpi,viia_tf) + VIIa_TF(x) r3_k1,r3_k2
	reaction_4: X(a~A,tfpi,viia_tf) + TFPI(x) <-> X(a~A,tfpi!605,viia_tf).TFPI(x!605) r4_k1,r4_k2
	reaction_5: VIIa_TF(x) + X(a~A,tfpi!605,viia_tf).TFPI(x!605) <-> X(a~A,tfpi!605,viia_tf!637).TFPI(x!605).VIIa_TF(x!637) r5_k1,r5_k2
	reaction_6: X(a~A,tfpi,viia_tf!637).VIIa_TF(x!637) + TFPI(x) <-> VIIa_TF_Xa_TFPI() r6_k1,r6_k2
	reaction_9: VIIa_TF_Xa_TFPI() <-> X(a~A,tfpi!605,viia_tf!637).TFPI(x!605).VIIa_TF(x!637) r7_k1,r7_k2
	reaction_8: X(a~0,tfpi,viia_tf!637).VIIa_TF(x!637) + X(a~A,tfpi!605,viia_tf).TFPI(x!605) <-> X(a~0,tfpi,viia_tf) + VIIa_TF_Xa_TFPI() r8_k1,r8_k2
end reaction rules
end model
