###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1110070000', 'http://identifiers.org/biomodels.db/BIOMD0000000381']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/16608707']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/pubmed/10480594']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/10090']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0042116', 'http://identifiers.org/go/GO:0071888', 'http://identifiers.org/doid/DOID:9744', 'http://identifiers.org/go/GO:0006909']
#@creatorEmail:'ajmera@ebi.ac.uk'
#@creatorName:'Ajmera Ishan'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 5 molecules and 0 reactions. The translated model has 5 molecules and 5 rules'
###
begin model
begin parameters
	J 50000.0
	c 0.1
	b 0.09
	d 0.5
	k 0.4
	e1 1e-08
	e2 1e-08
	Amax 20000000.0
	kc 1.0
	alpha 5e-09
	delta 25.0
	g 1e-05
	f1 1e-05
	f2 1e-05
	Wmax 40000000.0
end parameters
begin molecule types
	Cy()
	Bn()
	M()
	Ma()
	Ba()
end molecule types
begin seed species
	M() 2.872494e+29 # 477000.0mol/L * 6.022e23/mol *1.0L #M #M
end seed species
begin observables
	Species M M() #M
	Species Ma Ma() #Ma
	Species Bn Bn() #Bn
	Species Ba Ba() #Ba
	Species Cy Cy() #Cy
end observables
begin functions
	parameter_1() = (time()/3 - 3)^2
	W() = Wmax*exp(-parameter_1)
	arRateBa() = Amax*Cy/(Cy + kc) - Ba*(M*f1 + Ma*f2 + d) + W
	arRateCy() = Bn*Ma*alpha - Cy*delta
	arRateBn() = Ba*d - Bn*(M*f1 + Ma*f2)
	arRateMa() = Ba*M*f1 - Ma*e2*(M + Ma) - Ma*k
	arRateM() = -Ba*M*f1 + J - M*c - M*e1*(M + Ma) + Ma*(b + k)
end functions
begin reaction rules
	0  -> M() arRateM #rateLaw
	0  -> Ma() arRateMa #rateLaw
	0  -> Bn() arRateBn #rateLaw
	0  -> Ba() arRateBa #rateLaw
	0  -> Cy() arRateCy #rateLaw
end reaction rules
end model
