###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000392', 'http://identifiers.org/biomodels.db/MODEL1109270008']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/22001849']
#@BQB_ENCODES:['http://identifiers.org/go/GO:0019253']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/33090', 'http://identifiers.org/taxonomy/40674']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 53 molecules and 27 reactions. The translated model has 28 molecules and 68 rules'
###
begin model
begin parameters
	Et 0.0028030303030303
	ADT 0.0015
	ADTc 0.001
	UDTc 0.001
	NADPT 0.0005
	PiT 0.0284090909090909
	PiTc 0.0170454545454545
	q12 2227862541257.35
	Kp12 224014.808032967
	q1 0.129053067280279
	V28 7.386364e-05
	GAP_chloroplast 1.50494851161792e+20 #original 0.000249908421059103/
	GAP 1.50494851161792e+20 #original 0.000249908421059103/
	DHAP_chloroplast 1.50605148838208e+20 #original 0.000250091578940897/
	DHAP 1.50605148838208e+20 #original 0.000250091578940897/
	F6P_chloroplast 4.41667225519273e+20 #original 0.000733422825505269/
	F6P 4.41667225519273e+20 #original 0.000733422825505269/
	G6P_chloroplast 4.41739229013602e+20 #original 0.000733542392915314/
	G6P 4.41739229013602e+20 #original 0.000733542392915314/
	G1P_chloroplast 4.41433545467125e+20 #original 0.000733034781579417/
	G1P 4.41433545467125e+20 #original 0.000733034781579417/
	X5P_chloroplast 5.0177210352176e+19 #original 8.33231656462569e-05/
	X5P 5.0177210352176e+19 #original 8.33231656462569e-05/
	R5P_chloroplast 5.01929199034996e+19 #original 8.33492525797069e-05/
	R5P 5.01929199034996e+19 #original 8.33492525797069e-05/
	Ru5P_chloroplast 5.01798697443246e+19 #original 8.33275817740362e-05/
	Ru5P 5.01798697443246e+19 #original 8.33275817740362e-05/
	H_chloroplast 5.367113109959573e+22 #original 0.0891250931577478/
	H 5.367113109959573e+22 #original 0.0891250931577478/
	NADPH_chloroplast 1.2646200000000002e+20 #original 0.00021/
	NADPH 1.2646200000000002e+20 #original 0.00021/
	NADP_chloroplast 1.74638e+20 #original 0.00029/
	NADP 1.74638e+20 #original 0.00029/
	GAPc_cytosol 6.92276315344242e+20 #original 0.00114957873687187/
	GAPc 6.92276315344242e+20 #original 0.00114957873687187/
	DHAPc_cytosol 6.92783684655758e+20 #original 0.00115042126312813/
	DHAPc 6.92783684655758e+20 #original 0.00115042126312813/
	F6Pc_cytosol 1.16439541273263e+21 #original 0.00193356926724116/
	F6Pc 1.16439541273263e+21 #original 0.00193356926724116/
	G6Pc_cytosol 1.16458524012677e+21 #original 0.0019338844904131/
	G6Pc 1.16458524012677e+21 #original 0.0019338844904131/
	G1Pc_cytosol 1.1637793471406e+21 #original 0.00193254624234574/
	G1Pc 1.1637793471406e+21 #original 0.00193254624234574/
	ATPc_cytosol 2.1679200000000003e+20 #original 0.00036/
	ATPc 2.1679200000000003e+20 #original 0.00036/
	r1_k1 50000.000000
	r1_k2 0.900000
	r2_k1 300000.000000
	r3_k1 6.000000
	r3_k2 0.000000
	r4_k1 6.000000
	r4_k2 70000.000000
	r6_k1 3030.300000
	r7_k1 3.000000
	r8_Vm 0.017046
	r8_Ks1 0.001112
	r8_Ks2 0.000331
	r8_Kp1 0.000270
	r8_Kp2 0.000530
	r8_Kp3 0.002740
	r9_q 1.188150
	r9_Ks1 0.000270
	r9_Ks2 0.000364
	r9_Kp1 0.000020
	r9_Vm 0.022727
	r10_Vm 0.011364
	r10_q 0.772940
	r10_Ks1 0.000033
	r10_Kp1 0.000063
	r10_Kp2 0.001791
	r11_Vm 0.170455
	r11_q 0.999430
	r11_K1 0.000613
	r11_K2 0.000114
	r11_K1s2 0.000270
	r11_K2s1 0.000541
	r11_K2r1 0.000177
	r11_K2s2 0.000090
	r12_q 1.188150
	r12_Ks1 0.000177
	r12_Ks2 0.000364
	r12_Kp1 0.000020
	r12_Vm 0.011364
	r13_Vm 0.005682
	r13_q 0.772940
	r13_Ks1 0.000013
	r13_Kp1 0.000016
	r13_Kp2 0.006744
	r14_Vm 0.082102
	r14_q 0.999960
	r14_K1 0.000613
	r14_K2 0.000114
	r14_K1s2 0.000270
	r14_K2s1 0.000177
	r14_K2r1 0.000541
	r14_K2s2 0.000090
	r15_q 1.052890
	r15_Ks1 0.000036
	r15_Ks2 0.000551
	r15_Kp1 0.000100
	r15_Kp2 0.000091
	r15_Vm 0.568182
	r16_Ks1 0.000318
	r16_Ks2 0.000316
	r16_Vm 0.028409
	r17_Vm 0.001136
	r17_q 0.110590
	r17_Ks1 0.001040
	r17_Ks2 0.000110
	r17_Kp1 0.000530
	r17_Kp2 0.019510
	r18_Vm 0.002841
	r18_q 1.003260
	r18_Ks1 0.000212
	r18_Kp1 0.000636
	r19_Vm 0.056818
	r19_Ks 0.000094
	r19_Kr1 0.000892
	r19_Kr2 0.000099
	r19_Kp 0.000096
	r19_Kr3 0.000541
	r19_Kr4 0.000095
	r20_Vm 0.056818
	r20_Ks 0.000892
	r20_Kr1 0.000094
	r20_Kr2 0.000099
	r20_Kp 0.000541
	r20_Kr3 0.000096
	r20_Kr4 0.000095
	r21_q 1.002240
	r21_Ks1 0.000278
	r21_Ks2 0.000375
	r21_Kp1 0.000021
	r21_Vm 0.005682
	r22_Vm 0.001136
	r22_q 0.792367
	r22_Ks1 0.000022
	r22_Kr1 0.000001
	r22_Kp1 0.000065
	r22_Kp2 0.001862
	r23_q 1.621900
	r23_Ks1 0.000032
	r23_Ks2 0.000236
	r23_Kp1 0.000144
	r23_Kp2 0.001319
	r23_Vm 0.004106
	r24_Vm 0.000074
	r24_q 1.000120
	r24_Ks1 0.000278
	r24_Kr11 0.009202
	r24_Ks2 0.000111
	r24_Kp1 0.000642
	r24_Kp2 0.000375
	r24_Kr12 0.001643
	r25_Vm 0.001027
	r25_q 1.352860
	r25_Ks1 0.000054
	r25_Kp1 0.010000
	r25_Kp2 0.002191
	r26_Vm 0.000000
	r26_Ks1 0.001000
	r26_Kr1 0.001000
	r26_Kr2 0.001500
	r27_Vm 0.000000
	r27_Ks1 0.000000
	r27_Kr1 0.002000
	r27_Kr3 0.001000
	r27_Kr4 0.000100
end parameters
begin compartments
	#volume units: 
	chloroplast 3 1.0
	cytosol 3 1.0
end compartments
begin molecule types
	#^ bqbiol:isVersionOf chebi:CHEBI:17050
	PGAc()
	EOP()
	#^ bqbiol:is chebi:CHEBI:43474
	Pi(PiPi~PiPi~0,adp,s7p)
	#^ bqbiol:isVersionOf chebi:CHEBI:17992
	Succ(pic)
	#^ bqbiol:isVersionOf chebi:CHEBI:16761
	ADPc()
	#^ bqbiol:isVersionOf pubchem.compound:105021
	F26BPc()
	EPG()
	#^ bqbiol:isVersionOf chebi:CHEBI:43474
	Pic(succ)
	#^ bqbiol:isVersionOf pubchem.compound:24794350
	TPc()
	E(pga,phospho~PP~0,rubp)
	#^ bqbiol:isVersionOf chebi:CHEBI:15713
	UTPc()
	#^ bqbiol:isVersionOf pubchem.compound:24794350
	TP()
	#^ bqbiol:isVersionOf chebi:CHEBI:16526
	CO2()
	#^ bqbiol:isVersionOf chebi:CHEBI:17659
	UDPc()
	#^ bqbiol:isVersionOf chebi:CHEBI:15965
	HeP()
	#^ bqbiol:isVersionOf chebi:CHEBI:15965
	HePc()
	#^ bqbiol:isVersionOf pubchem.compound:165007
	S7P(pi)
	#^ bqbiol:is chebi:CHEBI:16710
	RuBP(e)
	#^ bqbiol:isVersionOf chebi:CHEBI:16905
	FBP()
	#^ bqbiol:is pubchem.compound:122357
	E4P()
	#^ bqbiol:isVersionOf chebi:CHEBI:16761
	ADP(g~G~0,pi)
	#^ bqbiol:isVersionOf chebi:CHEBI:15378
	Hc()
	EPP()
	#^ bqbiol:isVersionOf chebi:CHEBI:17050
	PGA(e)
	PiPic()
	#^ bqbiol:isVersionOf pubchem.compound:8629
	UDPGc()
	#^ bqbiol:isVersionOf chebi:CHEBI:16905
	FBPc()
	#^ bqbiol:isVersionOf chebi:CHEBI:15379
	O2()
end molecule types
begin seed species
	@chloroplast:RuBP(e)@chloroplast 1.2044e+21 # 0.002mol/L * 6.022e23/mol *1.0L #RuBP #RuBP
	@chloroplast:E(pga,phospho~0,rubp)@chloroplast -1.68242636e+21 #original 9.2303030303025e-06/ #E #E
	@chloroplast:E(pga,phospho~0,rubp!650)@chloroplast.RuBP(e!650)@chloroplast 7.232422e+20 #original 0.001201/ #ER #ER
	@chloroplast:EPP()@chloroplast 1.6325642e+20 #original 0.0002711/ #EPP #EPP
	@chloroplast:EPG()@chloroplast 1.9306532e+20 #original 0.0003206/ #EPG #EPG
	@chloroplast:E(pga!651,phospho~0,rubp)@chloroplast.PGA(e!651)@chloroplast 4.242499e+20 #original 0.0007045/ #EP #EP
	@chloroplast:EOP()@chloroplast 1.7861252e+20 #original 0.0002966/ #EOP #EOP
	@chloroplast:PGA(e)@chloroplast 1.44528e+21 #original 0.0024/ #PGA #PGA
	@chloroplast:TP()@chloroplast 3.011e+20 #original 0.0005/ #TP #TP
	@chloroplast:FBP()@chloroplast 4.03474e+20 #original 0.00067/ #FBP #FBP
	@chloroplast:HeP()@chloroplast 1.3248400000000003e+21 #original 0.0022/ #HeP #HeP
	@chloroplast:E4P()@chloroplast 3.0110000000000004e+19 #original 5e-05/ #E4P #E4P
	@chloroplast:Pi(PiPi~0,adp,s7p!652)@chloroplast.S7P(pi!652)@chloroplast 1.8066e+20 #original 0.0003/ #SBP #SBP
	@chloroplast:S7P(pi)@chloroplast 1.2044e+21 #original 0.002/ #S7P #S7P
	@chloroplast:E(pga,phospho~PP,rubp)@chloroplast 1.5055e+20 #original 0.00025/ #PeP #PeP
	@chloroplast:ADP(g~G,pi)@chloroplast 3.790849e+18 #original 6.295e-06/ #ADPG #ADPG
	@chloroplast:Pi(PiPi~0,adp!59,s7p)@chloroplast.ADP(g~0,pi!59)@chloroplast 4.0949600000000007e+20 #original 0.00068/ #ATP #ATP
	@chloroplast:ADP(g~0,pi)@chloroplast -4.09496e+20 #original 0.00082/ #ADP #ADP
	@chloroplast:Pi(PiPi~0,adp,s7p)@chloroplast -9.993024229e+21 #original 0.0109928959090909/ #Pi #Pi
	@chloroplast:$Pi(PiPi~PiPi,adp,s7p)@chloroplast 6.022e+17 #original 1e-06/ #PiPi #PiPi
	@chloroplast:CO2()@chloroplast 7.9554814845637e-30 #original 4.36233478328384e-06/ #CO2 #CO2
	@chloroplast:$O2()@chloroplast 1.56572e+20 #original 0.00026/ #O2 #O2
	@cytosol:TPc()@cytosol 1.3850600000000001e+21 #original 0.0023/ #TPc #TPc
	@cytosol:FBPc()@cytosol 1.2044e+21 #original 0.002/ #FBPc #FBPc
	@cytosol:F26BPc()@cytosol 4697160000000000.0 #original 7.8e-09/ #F26BPc #F26BPc
	@cytosol:HePc()@cytosol 3.4927599999999997e+21 #original 0.0058/ #HePc #HePc
	@cytosol:UDPGc()@cytosol 3.43254e+20 #original 0.00057/ #UDPGc #UDPGc
	@cytosol:$UTPc()@cytosol 2.1679200000000003e+20 #original 0.00036/ #UTPc #UTPc
	@cytosol:$UDPc()@cytosol 3.8540800000000007e+20 #original 0.00064/ #UDPc #UDPc
	@cytosol:ADPc()@cytosol 0.001 #original 0.00064/ #ADPc #ADPc
	@cytosol:Pic(succ)@cytosol -7.629874e+21 #original 0.00157545454545454/ #Pic #Pic
	@cytosol:$PiPic()@cytosol 2.4088000000000004e+19 #original 4e-05/ #PiPic #PiPic
	@cytosol:$Hc()@cytosol 9.544226751507679e+22 #original 0.158489318357816/ #Hc #Hc
end seed species
begin observables
	Species RuBP_chloroplast @chloroplast:RuBP(e)@chloroplast #RuBP
	Species E_chloroplast @chloroplast:E(pga,phospho~0,rubp)@chloroplast #E
	Species ER_chloroplast @chloroplast:E(pga,phospho~0,rubp!650)@chloroplast.RuBP(e!650)@chloroplast #ER
	Species EPP_chloroplast @chloroplast:EPP()@chloroplast #EPP
	Species EPG_chloroplast @chloroplast:EPG()@chloroplast #EPG
	Species EP_chloroplast @chloroplast:E(pga!651,phospho~0,rubp)@chloroplast.PGA(e!651)@chloroplast #EP
	Species EOP_chloroplast @chloroplast:EOP()@chloroplast #EOP
	Species PGA_chloroplast @chloroplast:PGA(e)@chloroplast #PGA
	Species TP_chloroplast @chloroplast:TP()@chloroplast #TP
	Species FBP_chloroplast @chloroplast:FBP()@chloroplast #FBP
	Species HeP_chloroplast @chloroplast:HeP()@chloroplast #HeP
	Species E4P_chloroplast @chloroplast:E4P()@chloroplast #E4P
	Species SBP_chloroplast @chloroplast:Pi(PiPi~0,adp,s7p!652)@chloroplast.S7P(pi!652)@chloroplast #SBP
	Species S7P_chloroplast @chloroplast:S7P(pi)@chloroplast #S7P
	Species PeP_chloroplast @chloroplast:E(pga,phospho~PP,rubp)@chloroplast #PeP
	Species ADPG_chloroplast @chloroplast:ADP(g~G,pi)@chloroplast #ADPG
	Species ATP_chloroplast @chloroplast:Pi(PiPi~0,adp!59,s7p)@chloroplast.ADP(g~0,pi!59)@chloroplast #ATP
	Species ADP_chloroplast @chloroplast:ADP(g~0,pi)@chloroplast #ADP
	Species Pi_chloroplast @chloroplast:Pi(PiPi~0,adp,s7p)@chloroplast #Pi
	Species PiPi_chloroplast @chloroplast:Pi(PiPi~PiPi,adp,s7p)@chloroplast #PiPi
	Species CO2_chloroplast @chloroplast:CO2()@chloroplast #CO2
	Species O2_chloroplast @chloroplast:O2()@chloroplast #O2
	Species PGAc_cytosol @cytosol:PGAc()@cytosol #PGAc
	Species TPc_cytosol @cytosol:TPc()@cytosol #TPc
	Species FBPc_cytosol @cytosol:FBPc()@cytosol #FBPc
	Species F26BPc_cytosol @cytosol:F26BPc()@cytosol #F26BPc
	Species HePc_cytosol @cytosol:HePc()@cytosol #HePc
	Species UDPGc_cytosol @cytosol:UDPGc()@cytosol #UDPGc
	Species UTPc_cytosol @cytosol:UTPc()@cytosol #UTPc
	Species UDPc_cytosol @cytosol:UDPc()@cytosol #UDPc
	Species ADPc_cytosol @cytosol:ADPc()@cytosol #ADPc
	Species SucPc_cytosol @cytosol:Succ(pic!653)@cytosol.Pic(succ!653)@cytosol #SucPc
	Species Succ_cytosol @cytosol:Succ(pic)@cytosol #Succ
	Species Pic_cytosol @cytosol:Pic(succ)@cytosol #Pic
	Species PiPic_cytosol @cytosol:PiPic()@cytosol #PiPic
	Species Hc_cytosol @cytosol:Hc()@cytosol #Hc
end observables
begin functions
	E_ar() = -EOP_chloroplast - EPG_chloroplast - EPP_chloroplast - EP_chloroplast - ER_chloroplast + Et
	ADP_ar() = ADT - ATP_chloroplast
	Pi_ar() = -ADPG_chloroplast - ADP_ar - 2*ATP_chloroplast - E4P_chloroplast - 2*EPG_chloroplast - 2*EPP_chloroplast - EP_chloroplast - 2*FBP_chloroplast - HeP_chloroplast - PGA_chloroplast - PeP_chloroplast - 2*PiPi_chloroplast + PiT - 2*RuBP_chloroplast - S7P_chloroplast - 2*SBP_chloroplast - TP_chloroplast
	W4() = 6*EOP_chloroplast - 70000*E_ar*Pi_ar
	ADPc_ar() = ADTc - ATPc_cytosol
	Pic_ar() = -ADPc_ar - 2*ATPc_cytosol - 2*FBPc_cytosol - HePc_cytosol - PGAc_cytosol - 2*PiPic_cytosol + PiTc - SucPc_cytosol - TPc_cytosol - UDPGc_cytosol - UDPc_cytosol - 2*UTPc_cytosol
	CO2_ar() = (26.66664*ER_chloroplast*O2_chloroplast + 3.0379746835443e-5)/(5280.0*ER_chloroplast + 2.53164556962025)
	DHAPc_ar() = 0.500183157881794*TPc_cytosol
	GAPc_ar() = 0.499816842118206*TPc_cytosol
	R5P_ar() = 0.333397010318828*PeP_chloroplast
	F6Pc_ar() = 0.333374011593304*HePc_cytosol
	G6Pc_ar() = 0.333428360416052*HePc_cytosol
	DHAP_ar() = 0.500183157881794*TP_chloroplast
	G1Pc_ar() = 0.333197627990644*HePc_cytosol
	G1P_ar() = 0.333197627990644*HeP_chloroplast
	G6P_ar() = 0.333428360416052*HeP_chloroplast
	X5P_ar() = 0.333292662585028*PeP_chloroplast
	F6P_ar() = 0.333374011593304*HeP_chloroplast
	Ru5P_ar() = 0.333310327096145*PeP_chloroplast
	GAP_ar() = 0.499816842118206*TP_chloroplast
	fRate4() = W4
	fRate5() = 3030.3*ER_chloroplast*O2_chloroplast
	fRate7() = (-0.0170455*ADP_chloroplast*GAP_chloroplast*Pi_chloroplast/q1 + 0.0170455*ATP_chloroplast*PGA_chloroplast)/(936.710353250248*ADP_chloroplast*GAP_chloroplast*Pi_chloroplast + 0.0006938006526701*ADP_chloroplast + 0.00136047545773997*GAP_chloroplast + 0.000134249932474359*Pi_chloroplast + 3.6780454e-7*(3023.88872089507*ATP_chloroplast + 1)*(899.118863513757*PGA_chloroplast + 1))
	fRate8() = (0.022727*DHAP_chloroplast*GAP_chloroplast - 0.0191280562218575*FBP_chloroplast)/(0.00488789684037955*FBP_chloroplast + 9.83884755e-8*(2747.78116670788*DHAP_chloroplast + 1)*(3698.90882189754*GAP_chloroplast + 1))
	fRate9() = (-0.0147023054829612*F6P_chloroplast*Pi_chloroplast + 0.011364*FBP_chloroplast)/(289.034152503223*F6P_chloroplast*Pi_chloroplast + 0.517775780794274*F6P_chloroplast + 1.0*FBP_chloroplast + 3.2842e-5)
	fRate10() = (-0.170455*E4P_chloroplast*X5P_chloroplast + 0.17035784065*F6P_chloroplast*GAP_chloroplast)/(0.00061349*E4P_chloroplast + 0.000775678570481075*GAP_chloroplast + 0.00061349*R5P_chloroplast + 0.00061349*X5P_chloroplast*(1630.01841920814*E4P_chloroplast*R5P_chloroplast + 1) + 7.01709862e-8*(1849.45441094877*F6P_chloroplast + 5657.06850709962*S7P_chloroplast)*(3698.90882189754*GAP_chloroplast + 1) + 7.01709862e-8)
	fRate11() = (0.011364*DHAP_chloroplast*E4P_chloroplast - 0.0095644489332155*SBP_chloroplast)/(0.00319598122609171*SBP_chloroplast + 6.43319061e-8*(2747.78116670788*DHAP_chloroplast + 1)*(5657.06850709962*E4P_chloroplast + 1))
	fRate12() = 5.9764887306576e-10/(1.2713e-5*Pi_chloroplast*S7P_chloroplast + 1.98284661e-10*Pi_chloroplast + 8.5736472e-8*S7P_chloroplast + 1.05186168e-7*SBP_chloroplast + 1.337231753784e-12)
	fRate12m() = 5.9764887306576e-10/(9.82638622e-6*Pi_chloroplast*S7P_chloroplast + 1.5326214587334e-10*Pi_chloroplast + 6.626914866768e-8*S7P_chloroplast + 8.130259669392e-8*SBP_chloroplast + 1.03359991176981e-12)
	fRate13() = (0.082099015908*GAP_chloroplast*S7P_chloroplast - 0.0821023*R5P_chloroplast*X5P_chloroplast)/(0.00061349*E4P_chloroplast + 0.000775678570481075*GAP_chloroplast + 0.00061349*R5P_chloroplast + 0.00061349*X5P_chloroplast*(1630.01841920814*E4P_chloroplast*R5P_chloroplast + 1) + 7.01709862e-8*(1849.45441094877*F6P_chloroplast + 5657.06850709962*S7P_chloroplast)*(3698.90882189754*GAP_chloroplast + 1) + 7.01709862e-8)
	fRate14() = (-0.539640418277313*ADP_chloroplast*RuBP_chloroplast + 0.568182*ATP_chloroplast*Ru5P_chloroplast)/(2.0058950278e-8*(10967.0166972829*ADP_chloroplast + 1)*(10041.491442641*RuBP_chloroplast + 1) + 2.0058950278e-8*(1814.32225991981*ATP_chloroplast + 1)*(27477.5096583446*Ru5P_chloroplast + 1) - 2.0058950278e-8)
	fRate15() = 0.0284091*Kp12/(1.005514496e-7*ATP_chloroplast + Kp12*(ADP_chloroplast*Pi_chloroplast + 0.00031612*ADP_chloroplast + 0.00031808*Pi_chloroplast + 1.005514496e-7))
	fRate15m() = 0.0284091*Kp12/(q12*(1.005514496e-7*ATP_chloroplast + Kp12*(ADP_chloroplast*Pi_chloroplast + 0.00031612*ADP_chloroplast + 0.00031808*Pi_chloroplast + 1.005514496e-7)))
	fRate16() = 9914.3972812307*PGA_chloroplast^2*(-9.04240889773036*ADPG_chloroplast*PiPi_chloroplast + ATP_chloroplast*G1P_chloroplast)/(Pi_chloroplast^2*((1886.32976817007*ADPG_chloroplast + 1)*(51.2557662737058*PiPi_chloroplast + 1) + (9071.9404880704*ATP_chloroplast + 1)*(961.723408347759*G1P_chloroplast + 1) - 1))
	fRate17() = 1.80726478287e-6/(0.000636157*ADPG_chloroplast + 0.000212052*ADP_chloroplast + 1.34898364164e-7)
	fRate17m() = 1.80726478287e-6/(0.00063823087182*ADPG_chloroplast + 0.00021274328952*ADP_chloroplast + 1.35338132831175e-7)
	fRate18() = (607.142322857784*TP_chloroplast*(1848.18969819062*PGAc_cytosol + 10544.4077733374*Pic_cytosol + 10376.4578923339*TPc_cytosol) - 589.571659818204*TPc_cytosol*(1120.9128714425*PGA_chloroplast + 10142.2964187551*Pi_chloroplast + 10685.7014628725*TP_chloroplast))/(1120.9128714425*PGA_chloroplast + 1848.18969819062*PGAc_cytosol + 10142.2964187551*Pi_chloroplast + 10544.4077733374*Pic_cytosol + 10685.7014628725*TP_chloroplast + 10376.4578923339*TPc_cytosol + (1120.9128714425*PGA_chloroplast + 10142.2964187551*Pi_chloroplast + 10685.7014628725*TP_chloroplast)*(1848.18969819062*PGAc_cytosol + 10544.4077733374*Pic_cytosol + 10376.4578923339*TPc_cytosol))
	fRate19() = (63.6882517121944*PGA_chloroplast*(1848.18969819062*PGAc_cytosol + 10544.4077733374*Pic_cytosol + 10376.4578923339*TPc_cytosol) - 105.010811909734*PGAc_cytosol*(1120.9128714425*PGA_chloroplast + 10142.2964187551*Pi_chloroplast + 10685.7014628725*TP_chloroplast))/(1120.9128714425*PGA_chloroplast + 1848.18969819062*PGAc_cytosol + 10142.2964187551*Pi_chloroplast + 10544.4077733374*Pic_cytosol + 10685.7014628725*TP_chloroplast + 10376.4578923339*TPc_cytosol + (1120.9128714425*PGA_chloroplast + 10142.2964187551*Pi_chloroplast + 10685.7014628725*TP_chloroplast)*(1848.18969819062*PGAc_cytosol + 10544.4077733374*Pic_cytosol + 10376.4578923339*TPc_cytosol))
	fRate20() = (0.00568182*DHAPc_cytosol*GAPc_cytosol - 0.00566912116858237*FBPc_cytosol)/(0.00496326898889766*FBPc_cytosol + 1.04340818646e-7*(2668.24626845759*DHAPc_cytosol + 1)*(3591.86371032338*GAPc_cytosol + 1))
	fRate21() = 2.84115676390162e-6*FBPc_cytosol*(-1.26204145301357*F6Pc_cytosol*Pic_cytosol + FBPc_cytosol)/((F26BPc_cytosol + 1.1065e-6)^2*(0.00250022595295648*FBPc_cytosol^2/(F26BPc_cytosol + 1.1065e-6)^2 + (15309.4811616834*F6Pc_cytosol + 1)*(536.941580756014*Pic_cytosol + 1)))
	fRate22() = (0.00410568*G1Pc_cytosol*UTPc_cytosol - 0.00253140144275233*PiPic_cytosol*UDPGc_cytosol)/(7.5941136e-9*(31129.3736770016*G1Pc_cytosol + 1)*(4230.11844331641*UTPc_cytosol + 1) + 7.5941136e-9*(758.035172832019*PiPic_cytosol + 1)*(6947.82185784756*UDPGc_cytosol + 1) - 7.5941136e-9)
	fRate23() = 728.885007735785*F6Pc_cytosol*(F6Pc_cytosol*UDPGc_cytosol - 0.999880014398272*Hc_cytosol*SucPc_cytosol*UDPc_cytosol)/((Pic_cytosol + 0.00920241)^2*(608.535316347084*Pic_cytosol + (2668.24626845759*SucPc_cytosol + 1)*(1557.25157554928*UDPc_cytosol + 1) + (9032.03663394059*UDPGc_cytosol + 1)*(1092.55386146198*F6Pc_cytosol^2/(Pic_cytosol + 0.00920241)^2 + 1) - 1))
	fRate24() = 2.2494997e-8/(5.354e-5*Pic_cytosol*Succ_cytosol + 2.191e-5*SucPc_cytosol + 1.1730614e-7*Succ_cytosol + 1.1730614e-9)
	fRate24m() = 2.2494997e-8/(7.24321244e-5*Pic_cytosol*Succ_cytosol + 2.96411626e-5*SucPc_cytosol + 1.586987845604e-7*Succ_cytosol + 1.586987845604e-9)
	fRate25() = 1.02614e-7*F6Pc_cytosol*(1000.0*Pic_cytosol + 1)/(0.666666666666667*PGAc_cytosol + 0.666666666666667*TPc_cytosol + 0.001)
	fRate26() = 2.05284e-10*F26BPc_cytosol*(500.0*PGAc_cytosol + 500.0*TPc_cytosol + 1)/(1.0e-5*HePc_cytosol + 1.0e-6*Pic_cytosol + 1.0e-9)
end functions
begin reaction rules
	RuBisCO_1: RuBP(e)@chloroplast + E(pga,phospho~0,rubp)@chloroplast <-> E(pga,phospho~0,rubp!650)@chloroplast.RuBP(e!650)@chloroplast r1_k1,r1_k2
	RuBisCO_2_CO2: E(pga,phospho~0,rubp!650)@chloroplast.RuBP(e!650)@chloroplast + CO2()@chloroplast -> EPP()@chloroplast r2_k1
	RuBisCO_4: EPP()@chloroplast <-> PGA(e)@chloroplast + E(pga!651,phospho~0,rubp)@chloroplast.PGA(e!651)@chloroplast r3_k1,r3_k2
	RuBisCO_5_EP: E(pga!651,phospho~0,rubp)@chloroplast.PGA(e!651)@chloroplast <-> PGA(e)@chloroplast + E(pga,phospho~0,rubp)@chloroplast r4_k1,r4_k2
	RuBisCO_5_EOP_reactants_0: 0  -> EOP()@chloroplast -1*(fRate4())
	RuBisCO_6_O2_reactants_0: 0  -> E(pga,phospho~0,rubp!650)@chloroplast.RuBP(e!650)@chloroplast -1*(fRate5())
	RuBisCO_6_O2_reactants_1: 0  -> O2()@chloroplast -1*(fRate5())
	RuBisCO_6_O2_reactants_2: 0  -> Pi(PiPi~0,adp!59,s7p)@chloroplast.ADP(g~0,pi!59)@chloroplast -1*0.5*(fRate5())
	RuBisCO_6_O2_products_0: 0  -> EPG()@chloroplast fRate5()
	RuBisCO_6_O2_products_1: 0  -> PGA(e)@chloroplast 0.5*fRate5()
	RuBisCO_6_O2_products_2: 0  -> ADP(g~0,pi)@chloroplast 0.5*fRate5()
	RuBisCO_7: EPG()@chloroplast -> E(pga!651,phospho~0,rubp)@chloroplast.PGA(e!651)@chloroplast r7_k1
	PGA_K_reactants_0: 0  -> PGA(e)@chloroplast -1*(fRate7()) #Modifiers(GAP)
	PGA_K_reactants_1: 0  -> Pi(PiPi~0,adp!59,s7p)@chloroplast.ADP(g~0,pi!59)@chloroplast -1*(fRate7()) #Modifiers(GAP)
	PGA_K_products_0: 0  -> TP()@chloroplast fRate7() #Modifiers(GAP)
	PGA_K_products_1: 0  -> ADP(g~0,pi)@chloroplast fRate7() #Modifiers(GAP)
	PGA_K_products_2: 0  -> Pi(PiPi~0,adp,s7p)@chloroplast fRate7() #Modifiers(GAP)
	FBP_A_reactants_0: 0  -> TP()@chloroplast -1*2.0*(fRate8()) #Modifiers(GAP, DHAP)
	FBP_A_products_0: 0  -> FBP()@chloroplast fRate8() #Modifiers(GAP, DHAP)
	FBPase_reactants_0: 0  -> FBP()@chloroplast -1*(fRate9()) #Modifiers(F6P)
	FBPase_products_0: 0  -> HeP()@chloroplast fRate9() #Modifiers(F6P)
	FBPase_products_1: 0  -> Pi(PiPi~0,adp,s7p)@chloroplast fRate9() #Modifiers(F6P)
	F6P_TK_reactants_0: 0  -> HeP()@chloroplast -1*(fRate10()) #Modifiers(F6P, GAP, X5P, S7P, R5P)
	F6P_TK_reactants_1: 0  -> TP()@chloroplast -1*(fRate10()) #Modifiers(F6P, GAP, X5P, S7P, R5P)
	F6P_TK_products_0: 0  -> E4P()@chloroplast fRate10() #Modifiers(F6P, GAP, X5P, S7P, R5P)
	F6P_TK_products_1: 0  -> E(pga,phospho~PP,rubp)@chloroplast fRate10() #Modifiers(F6P, GAP, X5P, S7P, R5P)
	SBP_A_reactants_0: 0  -> E4P()@chloroplast -1*(fRate11()) #Modifiers(DHAP)
	SBP_A_reactants_1: 0  -> TP()@chloroplast -1*(fRate11()) #Modifiers(DHAP)
	SBP_A_products_0: 0  -> Pi(PiPi~0,adp,s7p!652)@chloroplast.S7P(pi!652)@chloroplast fRate11() #Modifiers(DHAP)
	SBPase: Pi(PiPi~0,adp,s7p!652)@chloroplast.S7P(pi!652)@chloroplast <-> S7P(pi)@chloroplast + Pi(PiPi~0,adp,s7p)@chloroplast fRate12(),fRate12m()
	S7P_TK_reactants_0: 0  -> S7P(pi)@chloroplast -1*(fRate13()) #Modifiers(GAP, R5P, X5P, F6P, E4P)
	S7P_TK_reactants_1: 0  -> TP()@chloroplast -1*(fRate13()) #Modifiers(GAP, R5P, X5P, F6P, E4P)
	S7P_TK_products_0: 0  -> E(pga,phospho~PP,rubp)@chloroplast 2.0*fRate13() #Modifiers(GAP, R5P, X5P, F6P, E4P)
	Ru5P_K_reactants_0: 0  -> E(pga,phospho~PP,rubp)@chloroplast -1*(fRate14()) #Modifiers(Ru5P)
	Ru5P_K_reactants_1: 0  -> Pi(PiPi~0,adp!59,s7p)@chloroplast.ADP(g~0,pi!59)@chloroplast -1*(fRate14()) #Modifiers(Ru5P)
	Ru5P_K_products_0: 0  -> RuBP(e)@chloroplast fRate14() #Modifiers(Ru5P)
	Ru5P_K_products_1: 0  -> ADP(g~0,pi)@chloroplast fRate14() #Modifiers(Ru5P)
	ATP_S: ADP(g~0,pi)@chloroplast + Pi(PiPi~0,adp,s7p)@chloroplast <-> Pi(PiPi~0,adp!59,s7p)@chloroplast.ADP(g~0,pi!59)@chloroplast fRate15(),fRate15m()
	AGPase_reactants_0: 0  -> HeP()@chloroplast -1*(fRate16()) #Modifiers(G1P, PGA, Pi)
	AGPase_reactants_1: 0  -> Pi(PiPi~0,adp!59,s7p)@chloroplast.ADP(g~0,pi!59)@chloroplast -1*(fRate16()) #Modifiers(G1P, PGA, Pi)
	AGPase_products_0: 0  -> ADP(g~G,pi)@chloroplast fRate16() #Modifiers(G1P, PGA, Pi)
	AGPase_products_1: 0  -> Pi(PiPi~PiPi,adp,s7p)@chloroplast fRate16() #Modifiers(G1P, PGA, Pi)
	StS: ADP(g~G,pi)@chloroplast <-> ADP(g~0,pi)@chloroplast fRate17(),fRate17m()
	TPT_TP_reactants_0: 0  -> TP()@chloroplast -1*(fRate18()) #Modifiers(PGA, Pi, PGAc, Pic)
	TPT_TP_products_0: 0  -> TPc()@cytosol fRate18() #Modifiers(PGA, Pi, PGAc, Pic)
	TPT_PGA_reactants_0: 0  -> PGA(e)@chloroplast -1*(fRate19()) #Modifiers(TP, Pi, TPc, Pic)
	TPT_PGA_products_0: 0  -> PGAc()@cytosol fRate19() #Modifiers(TP, Pi, TPc, Pic)
	FBPc_A_reactants_0: 0  -> TPc()@cytosol -1*2.0*(fRate20()) #Modifiers(GAPc, DHAPc)
	FBPc_A_products_0: 0  -> FBPc()@cytosol fRate20() #Modifiers(GAPc, DHAPc)
	FBPcase_reactants_0: 0  -> FBPc()@cytosol -1*(fRate21()) #Modifiers(F6Pc, F26BPc)
	FBPcase_products_0: 0  -> HePc()@cytosol fRate21() #Modifiers(F6Pc, F26BPc)
	FBPcase_products_1: 0  -> Pic(succ)@cytosol fRate21() #Modifiers(F6Pc, F26BPc)
	UGPase_reactants_0: 0  -> HePc()@cytosol -1*(fRate22()) #Modifiers(G1Pc)
	UGPase_reactants_1: 0  -> UTPc()@cytosol -1*(fRate22()) #Modifiers(G1Pc)
	UGPase_products_0: 0  -> UDPGc()@cytosol fRate22() #Modifiers(G1Pc)
	UGPase_products_1: 0  -> PiPic()@cytosol fRate22() #Modifiers(G1Pc)
	SucPc_S_reactants_0: 0  -> HePc()@cytosol -1*(fRate23()) #Modifiers(F6Pc, Pic)
	SucPc_S_reactants_1: 0  -> UDPGc()@cytosol -1*(fRate23()) #Modifiers(F6Pc, Pic)
	SucPc_S_products_0: 0  -> UDPc()@cytosol fRate23() #Modifiers(F6Pc, Pic)
	SucPc_S_products_1: 0  -> Succ(pic!653)@cytosol.Pic(succ!653)@cytosol fRate23() #Modifiers(F6Pc, Pic)
	SucPc_S_products_2: 0  -> Hc()@cytosol fRate23() #Modifiers(F6Pc, Pic)
	SucPc_P: Succ(pic!653)@cytosol.Pic(succ!653)@cytosol <-> Succ(pic)@cytosol + Pic(succ)@cytosol fRate24(),fRate24m()
	F6Pc_K_reactants_0: 0  -> HePc()@cytosol -1*(fRate25()) #Modifiers(F6Pc, Pic, TPc, PGAc)
	F6Pc_K_products_0: 0  -> F26BPc()@cytosol fRate25() #Modifiers(F6Pc, Pic, TPc, PGAc)
	F6Pc_K_products_1: 0  -> ADPc()@cytosol fRate25() #Modifiers(F6Pc, Pic, TPc, PGAc)
	F26BPc_P_reactants_0: 0  -> F26BPc()@cytosol -1*(fRate26()) #Modifiers(F6Pc, TPc, PGAc, Pic, HePc)
	F26BPc_P_products_0: 0  -> HePc()@cytosol fRate26() #Modifiers(F6Pc, TPc, PGAc, Pic, HePc)
	F26BPc_P_products_1: 0  -> Pic(succ)@cytosol fRate26() #Modifiers(F6Pc, TPc, PGAc, Pic, HePc)
end reaction rules
end model
