###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000397', 'http://identifiers.org/biomodels.db/MODEL1101270002']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/21978399']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/panther.pathway/P00057']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0060070']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/40674']
#@BQB_OCCURS_IN:['http://identifiers.org/cl/CL:0000047']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 50 molecules and 29 reactions. The translated model has 37 molecules and 36 rules'
###
begin model
begin parameters
	kass_r1 0.784
	kdiss_r1 0.82
	kass_r5 1.15
	kdiss_r5 0.92
	kass_r47 1.31
	kdiss_r47 0.81
	kass_r48 0.85
	kdiss_r48 1.36
	kass_r54 0.8
	kdiss_r54 1.7
	kass_r58 1.74
	kdiss_r58 0.25
	kass_r63 1.77
	kdiss_r63 0.61
	kass_r64 1.29
	kdiss_r64 0.72
	kass_r65 1.8
	kdiss_r65 0.004
	kass_r66 1.99
	kdiss_r66 0.036
	kass_r68 2.0
	kass_r88 0.2
	kdiss_r88 1.09
	kass_r90 0.27
	kdiss_r90 1.028
	kass_r91 0.36
	kdiss_r91 1.16
	kass_r92 0.58
	kdiss_r92 0.92
	kass_r96 1.45
	kdiss_r96 0.183
	kass_r98 1.97
	kdiss_r98 1.09
	kass_r99 0.51
	kdiss_r99 0.854
	kass_r102 0.163
	kdiss_r102 1.65
	kass_r103 0.45
	kdiss_r103 1.277
	kass_r105 0.48
	kdiss_r105 1.62
	kass_r106 0.05
	kdiss_r106 1.13
	kass_r107 0.91
	kdiss_r107 1.056
	kass_r104_s30 0.39
	kdiss_r104_s30 1.278
	kass_r85_s30 0.7
	kdiss_r85_s30 0.649
	kass_re65 1.68
	kass_re64 0.83
	kass_r86_s37 0.87
	kdiss_r86_s37 1.32
	kass_r67 0.86
	kdiss_r67 0.7
	kI_r86_s304 1.43
	s6bromoindirubin3oxime_c1 0.5
	s6bromoindirubin3oxime 0.5
end parameters
begin compartments
	#volume units: L
	default 3 1.0
	c1 3 1.0 #Plasma Membrane
	c3 3 1.0 #Nucleus
	c4 3 1.0 #Cell Membrane
end compartments
begin molecule types
	Complex_br___TCF_Smad4__(_beta__catenin)
	#^ bqbiol:isVersionOf uniprot:P45481
	CBP()
	Complex_br___AdenomatousPolyposisColi_Axin__br_Diversin__Beta__Catenin__br_PP2A__()
	Complex_br___Dishevelled_CaseinKinase2__br_Beta_Arrestin_Frodo__br_FRAT__()
	Complex_br____Beta__Catenin_TCF__br_Smad4_Bcl9__br_Pygo_SWI__br_SNF__()
	Complex_br___AdenomatousPolyposisColi__Beta__Catenin__br_GlycogenSynthaseKinase_3_Beta__Axin__br_PP2A_Diversin__br_CaseinKinase1__(_beta_trcp)
	#^ bqbiol:isVersionOf chebi:CHEBI:16761
	ADP()
	Complex_br___Axin_PP2A__br_AdenomatousPolyposisColi__(_beta__catenin)
	Complex_br___Bcl9_Pygo____Smad4__()
	#^ bqbiol:isVersionOf uniprot:O00512
	Bcl9()
	Complex_br___AdenomatousPolyposisColi_Axin__br_PP2A__Beta__Catenin__br_Siah_1_Ebi__()
	Complex_br___TCF__Beta__Catenin__br_Smad4_Bcl9__()
	#^ bqbiol:isVersionOf uniprot:O60264
	SWI_SNF()
	Complex_br___Ebi_Siah_1__()
	Complex_br___AdenomatousPolyposisColi_Axin__br_Diversin_CaseinKinase1__br_GlycogenSynthaseKinase_3_Beta__PP2A__()
	Complex_br___AdenomatousPolyposisColi_Axin__br_PP2A__(_beta__catenin)
	Complex_br___AdenomatousPolyposisColi_Axin__br_PP2A_Diversin__br_CaseinKinase1__Beta__Catenin__br__beta_TrCP_GlycogenSynthaseKinase_3_Beta____s266()
	Ubiquitin()
	Complex_br___Bcl9__Beta__Catenin__br_TCF_Smad4__br_Pygo__()
	Complex_br___Frizzled_Wnt__br_LRP5_6__()
	#^ bqbiol:isVersionOf chebi:CHEBI:15422
	ATP()
	#^ bqbiol:isVersionOf uniprot:Q9V9W8
	Pygo()
	Complex_br___Siah_1_Ebi__()
	Complex_br___Dishevelled_Beta_Arrestin__br_Frodo__(_s286~_S286~0,caseinkinase2)
	#^ bqbiol:hasPart uniprot:P67870, uniprot:P68400
	CaseinKinase2(complex_br___dishevelled_beta_arrestin__br_frodo__)
	Complex_br___AdenomatousPolyposisColi__Beta__Catenin__br_Siah_1_Ebi__br_Axin_PP2A__()
	#^ bqbiol:isVersionOf uniprot:Q92837
	FRAT()
	WntTargetGenes()
	#^ bqbiol:isHomologTo uniprot:Q91854
	_beta_TrCP(_beta__catenin,complex_br___adenomatouspolyposiscoli__beta__catenin__br_glycogensynthasekinase_3_beta__axin__br_pp2a_diversin__br_caseinkinase1__)
	#^ bqbiol:isVersionOf uniprot:P35222, uniprot:P35222, uniprot:P35222, uniprot:P35222
	_Beta__Catenin(_beta_trcp,_s232~_S232~0,_s260~_S260~0,_s270~_S270~0,complex_br___adenomatouspolyposiscoli_axin__br_pp2a__,complex_br___axin_pp2a__br_adenomatouspolyposiscoli__,complex_br___tcf_smad4__)
	#^ bqbiol:isVersionOf uniprot:P54367
	CaseinKinase1()
	#^ bqbiol:isVersionOf uniprot:O75581, uniprot:O75197
	LRP5_6()
	#^ bqbiol:isVersionOf uniprot:P18537
	Frizzled(wnt)
	#^ bqbiol:isVersionOf uniprot:P56704
	#^ bqbiol:isHomologTo uniprot:A4F2Q1
	Wnt(frizzled)
	#^ bqbiol:isVersionOf uniprot:P49841
	GlycogenSynthaseKinase_3_Beta_()
	Complex_br___AdenomatousPolyposisColi__Beta__Catenin__br_Axin_PP2A__br_Diversin_CaseinKinase1__()
	#^ bqbiol:isHomologTo uniprot:Q8UVT6
	Diversin()
end molecule types
begin seed species
	@c1:Frizzled(wnt)@c1 3.0 #Frizzled #s1
	@c1:LRP5_6()@c1 3.0 #LRP5_6 #s28
	@c1:CaseinKinase1()@c1 1.0 #CaseinKinase1 #s30
	@c1:CaseinKinase2(complex_br___dishevelled_beta_arrestin__br_frodo__)@c1 3.0 #CaseinKinase2 #s31
	@c1:ATP()@c1 1.0 #ATP #s32
	@c1:Diversin()@c1 1.0 #Diversin #s46
	@c1:Complex_br___Ebi_Siah_1__()@c1 3.0 #Complex_br___Ebi_Siah_1__ #s75
	@c1:FRAT()@c1 3.0 #FRAT #s102
	@c1:Complex_br___Dishevelled_Beta_Arrestin__br_Frodo__(_s286~0,caseinkinase2)@c1 3.0 #Complex_br___Dishevelled_Beta_Arrestin__br_Frodo__ #s107
	@c1:Complex_br___Axin_PP2A__br_AdenomatousPolyposisColi__(_beta__catenin)@c1 4.0 #Complex_br___Axin_PP2A__br_AdenomatousPolyposisColi__ #s121
	@c3:Pygo()@c3 2.0 #Pygo #s171
	@c3:CBP()@c3 2.0 #CBP #s172
	@c3:SWI_SNF()@c3 2.0 #SWI_SNF #s173
	@c3:Bcl9()@c3 2.0 #Bcl9 #s170
	@c3:Complex_br___TCF_Smad4__(_beta__catenin)@c3 4.0 #Complex_br___TCF_Smad4__ #s174
	@c4:Wnt(frizzled)@default 5.0 #Wnt #s239
	@c1:_Beta__Catenin(_beta_trcp,_s232~0,_s260~0,_s270~0,complex_br___adenomatouspolyposiscoli_axin__br_pp2a__,complex_br___axin_pp2a__br_adenomatouspolyposiscoli__,complex_br___tcf_smad4__)@c1 5.0 #_Beta__Catenin #s36
	@c1:Complex_br___AdenomatousPolyposisColi__Beta__Catenin__br_GlycogenSynthaseKinase_3_Beta__Axin__br_PP2A_Diversin__br_CaseinKinase1__(_beta_trcp)@c1 5.0 #Complex_br___AdenomatousPolyposisColi__Beta__Catenin__br_GlycogenSynthaseKinase_3_Beta__Axin__br_PP2A_Diversin__br_CaseinKinase1__ #s252
	@c1:Ubiquitin()@c1 1.0 #Ubiquitin #s268
	@c1:_beta_TrCP(_beta__catenin,complex_br___adenomatouspolyposiscoli__beta__catenin__br_glycogensynthasekinase_3_beta__axin__br_pp2a_diversin__br_caseinkinase1__)@c1 2.0 #_beta_TrCP #s61
end seed species
begin observables
	Species Wnt_default @default:Wnt(frizzled)@default #Wnt
	Species Complex_br___Wnt_Frizzled___c1 @c1:Wnt(frizzled!667)@c1.Frizzled(wnt!667)@c1 #Complex_br_(Wnt/Frizzled)
	Species Frizzled_c1 @c1:Frizzled(wnt)@c1 #Frizzled
	Species Complex_br___Frizzled_Wnt__br_LRP5_6___c1 @c1:Complex_br___Frizzled_Wnt__br_LRP5_6__()@c1 #Complex_br_(Frizzled/Wnt/_br_LRP5/6)
	Species LRP5_6_c1 @c1:LRP5_6()@c1 #LRP5/6
	Species CaseinKinase1_c1 @c1:CaseinKinase1()@c1 #Casein Kinase 1
	Species CaseinKinase2_c1 @c1:CaseinKinase2(complex_br___dishevelled_beta_arrestin__br_frodo__)@c1 #Casein Kinase 2
	Species ATP_c1 @c1:ATP()@c1 #ATP
	Species ADP_c1 @c1:ADP()@c1 #ADP
	Species GlycogenSynthaseKinase_3_Beta__c1 @c1:GlycogenSynthaseKinase_3_Beta_()@c1 #Glycogen Synthase Kinase-3_Beta_
	Species Diversin_c1 @c1:Diversin()@c1 #Diversin
	Species Complex_br___Ebi_Siah_1___c1 @c1:Complex_br___Ebi_Siah_1__()@c1 #Complex_br_(Ebi/Siah-1)
	Species Complex_br___Siah_1_Ebi___c1 @c1:Complex_br___Siah_1_Ebi__()@c1 #Complex_br_(Siah-1/Ebi)
	Species FRAT_c1 @c1:FRAT()@c1 #FRAT
	Species Complex_br___Dishevelled_Beta_Arrestin__br_Frodo___c1 @c1:Complex_br___Dishevelled_Beta_Arrestin__br_Frodo__(_s286~0,caseinkinase2)@c1 #Complex_br_(Dishevelled/Beta-Arrestin/_br_Frodo)
	Species Complex_br___Axin_PP2A__br_AdenomatousPolyposisColi___c1 @c1:Complex_br___Axin_PP2A__br_AdenomatousPolyposisColi__(_beta__catenin)@c1 #Complex_br_(Axin/PP2A/_br_Adenomatous Polyposis Coli)
	Species Complex_br___AdenomatousPolyposisColi_Axin__br_Diversin_CaseinKinase1__br_GlycogenSynthaseKinase_3_Beta__PP2A___c1 @c1:Complex_br___AdenomatousPolyposisColi_Axin__br_Diversin_CaseinKinase1__br_GlycogenSynthaseKinase_3_Beta__PP2A__()@c1 #Complex_br_(Adenomatous Polyposis Coli/Axin/_br_Diversin/Casein Kinase 1/_br_Glycogen Synthase Kinase-3_Beta_/PP2A)
	Species Complex_br___AdenomatousPolyposisColi_Axin__br_PP2A___c1 @c1:Complex_br___AdenomatousPolyposisColi_Axin__br_PP2A__(_beta__catenin)@c1 #Complex_br_(Adenomatous Polyposis Coli/Axin/_br_PP2A)
	Species Pygo_c3 @c3:Pygo()@c3 #Pygo
	Species CBP_c3 @c3:CBP()@c3 #CBP
	Species SWI_SNF_c3 @c3:SWI_SNF()@c3 #SWI/SNF
	Species Bcl9_c3 @c3:Bcl9()@c3 #Bcl9
	Species WntTargetGenes_c3 @c3:WntTargetGenes()@c3 #Wnt Target Genes
	Species Complex_br___TCF_Smad4___c3 @c3:Complex_br___TCF_Smad4__(_beta__catenin)@c3 #Complex_br_(TCF/Smad4)
	Species Wnt_c4 @c4:Wnt(frizzled)@default #Wnt
	Species _Beta__Catenin_c1 @c1:_Beta__Catenin(_beta_trcp,_s232~0,_s260~0,_s270~0,complex_br___adenomatouspolyposiscoli_axin__br_pp2a__,complex_br___axin_pp2a__br_adenomatouspolyposiscoli__,complex_br___tcf_smad4__)@c1 #_Beta_-Catenin
	Species Complex_br___AdenomatousPolyposisColi_Axin__br__Beta__Catenin_PP2A___c1 @c1:_Beta__Catenin(_beta_trcp,_s232~0,_s260~0,_s270~0,complex_br___adenomatouspolyposiscoli_axin__br_pp2a__,complex_br___axin_pp2a__br_adenomatouspolyposiscoli__!668,complex_br___tcf_smad4__)@c1.Complex_br___Axin_PP2A__br_AdenomatousPolyposisColi__(_beta__catenin!668)@c1 #Complex_br_(Adenomatous Polyposis Coli/Axin/_br__Beta_-Catenin/PP2A)
	Species Complex_br___AdenomatousPolyposisColi_Axin__br_Diversin__Beta__Catenin__br_PP2A___c1 @c1:Complex_br___AdenomatousPolyposisColi_Axin__br_Diversin__Beta__Catenin__br_PP2A__()@c1 #Complex_br_(Adenomatous Polyposis Coli/Axin/_br_Diversin/_Beta_-Catenin/_br_PP2A)
	Species Complex_br___AdenomatousPolyposisColi_Axin__br_PP2A__Beta__Catenin__br_Siah_1_Ebi___c1 @c1:Complex_br___AdenomatousPolyposisColi_Axin__br_PP2A__Beta__Catenin__br_Siah_1_Ebi__()@c1 #Complex_br_(Adenomatous Polyposis Coli/Axin/_br_PP2A/_Beta_-Catenin/_br_Siah-1/Ebi)
	Species _Beta__Catenin_s232_c3 @c3:_Beta__Catenin(_beta_trcp,_s232~_S232,_s260~0,_s270~0,complex_br___adenomatouspolyposiscoli_axin__br_pp2a__,complex_br___axin_pp2a__br_adenomatouspolyposiscoli__,complex_br___tcf_smad4__)@c3 #_Beta_-Catenin
	Species Complex_br___TCF_Smad4__br__Beta__Catenin___c3 @c3:_Beta__Catenin(_beta_trcp,_s232~_S232,_s260~0,_s270~0,complex_br___adenomatouspolyposiscoli_axin__br_pp2a__,complex_br___axin_pp2a__br_adenomatouspolyposiscoli__,complex_br___tcf_smad4__!671)@c3.Complex_br___TCF_Smad4__(_beta__catenin!671)@c3 #Complex_br_(TCF/Smad4/_br__Beta_-Catenin)
	Species Complex_br___TCF__Beta__Catenin__br_Smad4_Bcl9___c3 @c3:Complex_br___TCF__Beta__Catenin__br_Smad4_Bcl9__()@c3 #Complex_br_(TCF/_Beta_-Catenin/_br_Smad4/Bcl9)
	Species Complex_br___Bcl9__Beta__Catenin__br_TCF_Smad4__br_Pygo___c3 @c3:Complex_br___Bcl9__Beta__Catenin__br_TCF_Smad4__br_Pygo__()@c3 #Complex_br_(Bcl9/_Beta_-Catenin/_br_TCF/Smad4/_br_Pygo)
	Species Complex_br____Beta__Catenin_TCF__br_Smad4_Bcl9__br_Pygo_SWI__br_SNF___c3 @c3:Complex_br____Beta__Catenin_TCF__br_Smad4_Bcl9__br_Pygo_SWI__br_SNF__()@c3 #Complex_br_(_Beta_-Catenin/TCF/_br_Smad4/Bcl9/_br_Pygo/SWI/_br_SNF)
	Species Complex_br___AdenomatousPolyposisColi__Beta__Catenin__br_Axin_PP2A__br_Diversin_CaseinKinase1___c1 @c1:Complex_br___AdenomatousPolyposisColi__Beta__Catenin__br_Axin_PP2A__br_Diversin_CaseinKinase1__()@c1 #Complex_br_(Adenomatous Polyposis Coli/_Beta_-Catenin/_br_Axin/PP2A/_br_Diversin/Casein Kinase 1)
	Species Complex_br___AdenomatousPolyposisColi__Beta__Catenin__br_GlycogenSynthaseKinase_3_Beta__Axin__br_PP2A_Diversin__br_CaseinKinase1___c1 @c1:Complex_br___AdenomatousPolyposisColi__Beta__Catenin__br_GlycogenSynthaseKinase_3_Beta__Axin__br_PP2A_Diversin__br_CaseinKinase1__(_beta_trcp)@c1 #Complex_br_(Adenomatous Polyposis Coli/_Beta_-Catenin/_br_Glycogen Synthase Kinase-3_Beta_/Axin/_br_PP2A/Diversin/_br_Casein Kinase 1)
	Species Ubiquitin_c1 @c1:Ubiquitin()@c1 #Ubiquitin
	Species _Beta__Catenin_s260_c1 @c1:_Beta__Catenin(_beta_trcp,_s232~0,_s260~_S260,_s270~0,complex_br___adenomatouspolyposiscoli_axin__br_pp2a__,complex_br___axin_pp2a__br_adenomatouspolyposiscoli__,complex_br___tcf_smad4__)@c1 #_Beta_-Catenin
	Species _Beta__Catenin_s270_c1 @c1:_Beta__Catenin(_beta_trcp,_s232~0,_s260~0,_s270~_S270,complex_br___adenomatouspolyposiscoli_axin__br_pp2a__,complex_br___axin_pp2a__br_adenomatouspolyposiscoli__,complex_br___tcf_smad4__)@c1 #_Beta_-Catenin
	Species Complex_br___AdenomatousPolyposisColi__Beta__Catenin__br_Siah_1_Ebi__br_Axin_PP2A___c1 @c1:Complex_br___AdenomatousPolyposisColi__Beta__Catenin__br_Siah_1_Ebi__br_Axin_PP2A__()@c1 #Complex_br_(Adenomatous Polyposis Coli/_Beta_-Catenin/_br_Siah-1/Ebi/_br_Axin/PP2A)
	Species Complex_br___AdenomatousPolyposisColi__Beta__Catenin__br_Axin_PP2A___c1 @c1:_Beta__Catenin(_beta_trcp,_s232~0,_s260~0,_s270~_S270,complex_br___adenomatouspolyposiscoli_axin__br_pp2a__!673,complex_br___axin_pp2a__br_adenomatouspolyposiscoli__,complex_br___tcf_smad4__)@c1.Complex_br___AdenomatousPolyposisColi_Axin__br_PP2A__(_beta__catenin!673)@c1 #Complex_br_(Adenomatous Polyposis Coli/_Beta_-Catenin/_br_Axin/PP2A)
	Species Complex_br___Dishevelled_Beta_Arrestin__br_Frodo___s286_c1 @c1:Complex_br___Dishevelled_Beta_Arrestin__br_Frodo__(_s286~_S286,caseinkinase2)@c1 #Complex_br_(Dishevelled/Beta-Arrestin/_br_Frodo)
	Species Complex_br___Dishevelled_Beta_Arrestin__br_Frodo_CaseinKinase2___c1 @c1:Complex_br___Dishevelled_Beta_Arrestin__br_Frodo__(_s286~_S286,caseinkinase2!672)@c1.CaseinKinase2(complex_br___dishevelled_beta_arrestin__br_frodo__!672)@c1 #Complex_br_(Dishevelled/Beta-Arrestin/_br_Frodo/Casein Kinase 2)
	Species Complex_br___Dishevelled_CaseinKinase2__br_Beta_Arrestin_Frodo__br_FRAT___c1 @c1:Complex_br___Dishevelled_CaseinKinase2__br_Beta_Arrestin_Frodo__br_FRAT__()@c1 #Complex_br_(Dishevelled/Casein Kinase 2/_br_Beta-Arrestin/Frodo/_br_FRAT)
	Species _beta_TrCP_c1 @c1:_beta_TrCP(_beta__catenin,complex_br___adenomatouspolyposiscoli__beta__catenin__br_glycogensynthasekinase_3_beta__axin__br_pp2a_diversin__br_caseinkinase1__)@c1 #_beta_TrCP
	Species Complex_br___AdenomatousPolyposisColi_Axin__br_PP2A_Diversin__br_CaseinKinase1__Beta__Catenin__br__beta_TrCP_GlycogenSynthaseKinase_3_Beta____c1 @c1:_beta_TrCP(_beta__catenin,complex_br___adenomatouspolyposiscoli__beta__catenin__br_glycogensynthasekinase_3_beta__axin__br_pp2a_diversin__br_caseinkinase1__!669)@c1.Complex_br___AdenomatousPolyposisColi__Beta__Catenin__br_GlycogenSynthaseKinase_3_Beta__Axin__br_PP2A_Diversin__br_CaseinKinase1__(_beta_trcp!669)@c1 #Complex_br_(Adenomatous Polyposis Coli/Axin/_br_PP2A/Diversin/_br_Casein Kinase 1/_Beta_-Catenin/_br__beta_TrCP/Glycogen Synthase Kinase-3_Beta_)
	Species Complex_br___AdenomatousPolyposisColi_Axin__br_PP2A_Diversin__br_CaseinKinase1__Beta__Catenin__br__beta_TrCP_GlycogenSynthaseKinase_3_Beta____s266_c1 @c1:Complex_br___AdenomatousPolyposisColi_Axin__br_PP2A_Diversin__br_CaseinKinase1__Beta__Catenin__br__beta_TrCP_GlycogenSynthaseKinase_3_Beta____s266()@c1 #Complex_br_(Adenomatous Polyposis Coli/Axin/_br_PP2A/Diversin/_br_Casein Kinase 1/_Beta_-Catenin/_br__beta_TrCP/Glycogen Synthase Kinase-3_Beta_)
	Species Complex_br____beta_TrCP__Beta__Catenin___c1 @c1:_Beta__Catenin(_beta_trcp!670,_s232~0,_s260~_S260,_s270~0,complex_br___adenomatouspolyposiscoli_axin__br_pp2a__,complex_br___axin_pp2a__br_adenomatouspolyposiscoli__,complex_br___tcf_smad4__)@c1._beta_TrCP(_beta__catenin!670,complex_br___adenomatouspolyposiscoli__beta__catenin__br_glycogensynthasekinase_3_beta__axin__br_pp2a_diversin__br_caseinkinase1__)@c1 #Complex_br_(_beta_TrCP/_Beta_-Catenin)
	Species Complex_br___Bcl9_Pygo____Smad4___c3 @c3:Complex_br___Bcl9_Pygo____Smad4__()@c3 #Complex_br_(Bcl9/Pygo/../Smad4)
end observables
begin functions
	fRate21() = CaseinKinase1_c1*kass_r104_s30
	fRate21m() = CaseinKinase1_c1*kdiss_r104_s30
	fRate22() = CaseinKinase1_c1*kass_r85_s30
	fRate22m() = CaseinKinase1_c1*kdiss_r85_s30
	fRate28() = GlycogenSynthaseKinase_3_Beta__c1*kI_r86_s304*(-ADP_c1^3*Complex_br___AdenomatousPolyposisColi__Beta__Catenin__br_GlycogenSynthaseKinase_3_Beta__Axin__br_PP2A_Diversin__br_CaseinKinase1___c1*kdiss_r86_s37 + ATP_c1^3*Complex_br___AdenomatousPolyposisColi__Beta__Catenin__br_Axin_PP2A__br_Diversin_CaseinKinase1___c1*kass_r86_s37)/(kI_r86_s304 + s6bromoindirubin3oxime_c1)
end functions
begin reaction rules
	r68: Complex_br___Bcl9_Pygo____Smad4__()@c3 -> WntTargetGenes()@c3 kass_r68
	r1: Wnt(frizzled)@default + Frizzled(wnt)@c1 <-> Wnt(frizzled!667)@c1.Frizzled(wnt!667)@c1 kass_r1,kdiss_r1
	r5: LRP5_6()@c1 + Wnt(frizzled!667)@c1.Frizzled(wnt!667)@c1 <-> Complex_br___Frizzled_Wnt__br_LRP5_6__()@c1 kass_r5,kdiss_r5
	r47: Complex_br___Axin_PP2A__br_AdenomatousPolyposisColi__(_beta__catenin)@c1 + _Beta__Catenin(_beta_trcp,_s232~0,_s260~0,_s270~0,complex_br___adenomatouspolyposiscoli_axin__br_pp2a__,complex_br___axin_pp2a__br_adenomatouspolyposiscoli__,complex_br___tcf_smad4__)@c1 <-> _Beta__Catenin(_beta_trcp,_s232~0,_s260~0,_s270~0,complex_br___adenomatouspolyposiscoli_axin__br_pp2a__,complex_br___axin_pp2a__br_adenomatouspolyposiscoli__!668,complex_br___tcf_smad4__)@c1.Complex_br___Axin_PP2A__br_AdenomatousPolyposisColi__(_beta__catenin!668)@c1 kass_r47,kdiss_r47
	r48: _Beta__Catenin(_beta_trcp,_s232~0,_s260~0,_s270~0,complex_br___adenomatouspolyposiscoli_axin__br_pp2a__,complex_br___axin_pp2a__br_adenomatouspolyposiscoli__!668,complex_br___tcf_smad4__)@c1.Complex_br___Axin_PP2A__br_AdenomatousPolyposisColi__(_beta__catenin!668)@c1 + Diversin()@c1 <-> Complex_br___AdenomatousPolyposisColi_Axin__br_Diversin__Beta__Catenin__br_PP2A__()@c1 kass_r48,kdiss_r48
	r54: _Beta__Catenin(_beta_trcp,_s232~0,_s260~0,_s270~0,complex_br___adenomatouspolyposiscoli_axin__br_pp2a__,complex_br___axin_pp2a__br_adenomatouspolyposiscoli__!668,complex_br___tcf_smad4__)@c1.Complex_br___Axin_PP2A__br_AdenomatousPolyposisColi__(_beta__catenin!668)@c1 + Complex_br___Ebi_Siah_1__()@c1 <-> Complex_br___AdenomatousPolyposisColi_Axin__br_PP2A__Beta__Catenin__br_Siah_1_Ebi__()@c1 kass_r54,kdiss_r54
	r58: _Beta__Catenin(_beta_trcp,_s232~0,_s260~0,_s270~0,complex_br___adenomatouspolyposiscoli_axin__br_pp2a__,complex_br___axin_pp2a__br_adenomatouspolyposiscoli__,complex_br___tcf_smad4__)@c1 <-> _Beta__Catenin(_beta_trcp,_s232~_S232,_s260~0,_s270~0,complex_br___adenomatouspolyposiscoli_axin__br_pp2a__,complex_br___axin_pp2a__br_adenomatouspolyposiscoli__,complex_br___tcf_smad4__)@c3 kass_r58,kdiss_r58
	r63: Complex_br___TCF_Smad4__(_beta__catenin)@c3 + _Beta__Catenin(_beta_trcp,_s232~_S232,_s260~0,_s270~0,complex_br___adenomatouspolyposiscoli_axin__br_pp2a__,complex_br___axin_pp2a__br_adenomatouspolyposiscoli__,complex_br___tcf_smad4__)@c3 <-> _Beta__Catenin(_beta_trcp,_s232~_S232,_s260~0,_s270~0,complex_br___adenomatouspolyposiscoli_axin__br_pp2a__,complex_br___axin_pp2a__br_adenomatouspolyposiscoli__,complex_br___tcf_smad4__!671)@c3.Complex_br___TCF_Smad4__(_beta__catenin!671)@c3 kass_r63,kdiss_r63
	r66: Complex_br___Bcl9__Beta__Catenin__br_TCF_Smad4__br_Pygo__()@c3 + SWI_SNF()@c3 <-> Complex_br____Beta__Catenin_TCF__br_Smad4_Bcl9__br_Pygo_SWI__br_SNF__()@c3 kass_r66,kdiss_r66
	r88: Complex_br___AdenomatousPolyposisColi__Beta__Catenin__br_GlycogenSynthaseKinase_3_Beta__Axin__br_PP2A_Diversin__br_CaseinKinase1__(_beta_trcp)@c1 + _beta_TrCP(_beta__catenin,complex_br___adenomatouspolyposiscoli__beta__catenin__br_glycogensynthasekinase_3_beta__axin__br_pp2a_diversin__br_caseinkinase1__)@c1 <-> _beta_TrCP(_beta__catenin,complex_br___adenomatouspolyposiscoli__beta__catenin__br_glycogensynthasekinase_3_beta__axin__br_pp2a_diversin__br_caseinkinase1__!669)@c1.Complex_br___AdenomatousPolyposisColi__Beta__Catenin__br_GlycogenSynthaseKinase_3_Beta__Axin__br_PP2A_Diversin__br_CaseinKinase1__(_beta_trcp!669)@c1 kass_r88,kdiss_r88
	r90: _beta_TrCP(_beta__catenin,complex_br___adenomatouspolyposiscoli__beta__catenin__br_glycogensynthasekinase_3_beta__axin__br_pp2a_diversin__br_caseinkinase1__!669)@c1.Complex_br___AdenomatousPolyposisColi__Beta__Catenin__br_GlycogenSynthaseKinase_3_Beta__Axin__br_PP2A_Diversin__br_CaseinKinase1__(_beta_trcp!669)@c1 + Ubiquitin()@c1 <-> Complex_br___AdenomatousPolyposisColi_Axin__br_PP2A_Diversin__br_CaseinKinase1__Beta__Catenin__br__beta_TrCP_GlycogenSynthaseKinase_3_Beta____s266()@c1 kass_r90,kdiss_r90
	r91: Complex_br___AdenomatousPolyposisColi_Axin__br_PP2A_Diversin__br_CaseinKinase1__Beta__Catenin__br__beta_TrCP_GlycogenSynthaseKinase_3_Beta____s266()@c1 <-> Complex_br___AdenomatousPolyposisColi_Axin__br_Diversin_CaseinKinase1__br_GlycogenSynthaseKinase_3_Beta__PP2A__()@c1 + _Beta__Catenin(_beta_trcp!670,_s232~0,_s260~_S260,_s270~0,complex_br___adenomatouspolyposiscoli_axin__br_pp2a__,complex_br___axin_pp2a__br_adenomatouspolyposiscoli__,complex_br___tcf_smad4__)@c1._beta_TrCP(_beta__catenin!670,complex_br___adenomatouspolyposiscoli__beta__catenin__br_glycogensynthasekinase_3_beta__axin__br_pp2a_diversin__br_caseinkinase1__)@c1 kass_r91,kdiss_r91
	r92: _Beta__Catenin(_beta_trcp!670,_s232~0,_s260~_S260,_s270~0,complex_br___adenomatouspolyposiscoli_axin__br_pp2a__,complex_br___axin_pp2a__br_adenomatouspolyposiscoli__,complex_br___tcf_smad4__)@c1._beta_TrCP(_beta__catenin!670,complex_br___adenomatouspolyposiscoli__beta__catenin__br_glycogensynthasekinase_3_beta__axin__br_pp2a_diversin__br_caseinkinase1__)@c1 <-> _beta_TrCP(_beta__catenin,complex_br___adenomatouspolyposiscoli__beta__catenin__br_glycogensynthasekinase_3_beta__axin__br_pp2a_diversin__br_caseinkinase1__)@c1 + _Beta__Catenin(_beta_trcp,_s232~0,_s260~_S260,_s270~0,complex_br___adenomatouspolyposiscoli_axin__br_pp2a__,complex_br___axin_pp2a__br_adenomatouspolyposiscoli__,complex_br___tcf_smad4__)@c1 kass_r92,kdiss_r92
	r96: Complex_br___AdenomatousPolyposisColi_Axin__br_PP2A__Beta__Catenin__br_Siah_1_Ebi__()@c1 + Ubiquitin()@c1 <-> Complex_br___AdenomatousPolyposisColi__Beta__Catenin__br_Siah_1_Ebi__br_Axin_PP2A__()@c1 kass_r96,kdiss_r96
	r98: Complex_br___AdenomatousPolyposisColi__Beta__Catenin__br_Siah_1_Ebi__br_Axin_PP2A__()@c1 <-> Complex_br___Siah_1_Ebi__()@c1 + _Beta__Catenin(_beta_trcp,_s232~0,_s260~0,_s270~_S270,complex_br___adenomatouspolyposiscoli_axin__br_pp2a__!673,complex_br___axin_pp2a__br_adenomatouspolyposiscoli__,complex_br___tcf_smad4__)@c1.Complex_br___AdenomatousPolyposisColi_Axin__br_PP2A__(_beta__catenin!673)@c1 kass_r98,kdiss_r98
	r99: _Beta__Catenin(_beta_trcp,_s232~0,_s260~0,_s270~_S270,complex_br___adenomatouspolyposiscoli_axin__br_pp2a__!673,complex_br___axin_pp2a__br_adenomatouspolyposiscoli__,complex_br___tcf_smad4__)@c1.Complex_br___AdenomatousPolyposisColi_Axin__br_PP2A__(_beta__catenin!673)@c1 <-> Complex_br___AdenomatousPolyposisColi_Axin__br_PP2A__(_beta__catenin)@c1 + _Beta__Catenin(_beta_trcp,_s232~0,_s260~0,_s270~_S270,complex_br___adenomatouspolyposiscoli_axin__br_pp2a__,complex_br___axin_pp2a__br_adenomatouspolyposiscoli__,complex_br___tcf_smad4__)@c1 kass_r99,kdiss_r99
	r102: Complex_br___Dishevelled_Beta_Arrestin__br_Frodo__(_s286~_S286,caseinkinase2)@c1 + CaseinKinase2(complex_br___dishevelled_beta_arrestin__br_frodo__)@c1 <-> Complex_br___Dishevelled_Beta_Arrestin__br_Frodo__(_s286~_S286,caseinkinase2!672)@c1.CaseinKinase2(complex_br___dishevelled_beta_arrestin__br_frodo__!672)@c1 kass_r102,kdiss_r102
	r103: Complex_br___Dishevelled_Beta_Arrestin__br_Frodo__(_s286~_S286,caseinkinase2!672)@c1.CaseinKinase2(complex_br___dishevelled_beta_arrestin__br_frodo__!672)@c1 + FRAT()@c1 <-> Complex_br___Dishevelled_CaseinKinase2__br_Beta_Arrestin_Frodo__br_FRAT__()@c1 kass_r103,kdiss_r103
	r105: Complex_br___Dishevelled_CaseinKinase2__br_Beta_Arrestin_Frodo__br_FRAT__()@c1 <-> GlycogenSynthaseKinase_3_Beta_()@c1 kass_r105,kdiss_r105
	r106: Complex_br___Dishevelled_Beta_Arrestin__br_Frodo__(_s286~_S286,caseinkinase2)@c1 <-> CaseinKinase1()@c1 kass_r106,kdiss_r106
	r107: Wnt(frizzled)@c4 <-> Wnt(frizzled)@default kass_r107,kdiss_r107
	r104: Complex_br___Dishevelled_Beta_Arrestin__br_Frodo__(_s286~0,caseinkinase2)@c1 + ATP()@c1 <-> Complex_br___Dishevelled_Beta_Arrestin__br_Frodo__(_s286~_S286,caseinkinase2)@c1 + ADP()@c1 fRate21(),fRate21m() #Modifiers(s27, s30)
	r85: Complex_br___AdenomatousPolyposisColi_Axin__br_Diversin__Beta__Catenin__br_PP2A__()@c1 + ATP()@c1 <-> Complex_br___AdenomatousPolyposisColi__Beta__Catenin__br_Axin_PP2A__br_Diversin_CaseinKinase1__()@c1 + ADP()@c1 fRate22(),fRate22m() #Modifiers(s30)
	r65: Complex_br___TCF__Beta__Catenin__br_Smad4_Bcl9__()@c3 + Pygo()@c3 <-> Complex_br___Bcl9__Beta__Catenin__br_TCF_Smad4__br_Pygo__()@c3 kass_r65,kdiss_r65
	r64: _Beta__Catenin(_beta_trcp,_s232~_S232,_s260~0,_s270~0,complex_br___adenomatouspolyposiscoli_axin__br_pp2a__,complex_br___axin_pp2a__br_adenomatouspolyposiscoli__,complex_br___tcf_smad4__!671)@c3.Complex_br___TCF_Smad4__(_beta__catenin!671)@c3 + Bcl9()@c3 <-> Complex_br___TCF__Beta__Catenin__br_Smad4_Bcl9__()@c3 kass_r64,kdiss_r64
	re65: _Beta__Catenin(_beta_trcp,_s232~0,_s260~_S260,_s270~0,complex_br___adenomatouspolyposiscoli_axin__br_pp2a__,complex_br___axin_pp2a__br_adenomatouspolyposiscoli__,complex_br___tcf_smad4__)@c1 -> _Beta__Catenin(_beta_trcp,_s232~_S232,_s260~0,_s270~0,complex_br___adenomatouspolyposiscoli_axin__br_pp2a__,complex_br___axin_pp2a__br_adenomatouspolyposiscoli__,complex_br___tcf_smad4__)@c3 kass_re65
	re64: _Beta__Catenin(_beta_trcp,_s232~0,_s260~0,_s270~_S270,complex_br___adenomatouspolyposiscoli_axin__br_pp2a__,complex_br___axin_pp2a__br_adenomatouspolyposiscoli__,complex_br___tcf_smad4__)@c1 -> _Beta__Catenin(_beta_trcp,_s232~_S232,_s260~0,_s270~0,complex_br___adenomatouspolyposiscoli_axin__br_pp2a__,complex_br___axin_pp2a__br_adenomatouspolyposiscoli__,complex_br___tcf_smad4__)@c3 kass_re64
	r67: Complex_br____Beta__Catenin_TCF__br_Smad4_Bcl9__br_Pygo_SWI__br_SNF__()@c3 + CBP()@c3 <-> Complex_br___Bcl9_Pygo____Smad4__()@c3 kass_r67,kdiss_r67
	r86_reactants_0: 0  -> Complex_br___AdenomatousPolyposisColi__Beta__Catenin__br_Axin_PP2A__br_Diversin_CaseinKinase1__()@c1 -1*(fRate28()) #Modifiers(s37, s304)
	r86_reactants_1: 0  -> ATP()@c1 -1*(fRate28()) #Modifiers(s37, s304)
	r86_reactants_2: 0  -> ATP()@c1 -1*(fRate28()) #Modifiers(s37, s304)
	r86_reactants_3: 0  -> ATP()@c1 -1*(fRate28()) #Modifiers(s37, s304)
	r86_products_0: 0  -> Complex_br___AdenomatousPolyposisColi__Beta__Catenin__br_GlycogenSynthaseKinase_3_Beta__Axin__br_PP2A_Diversin__br_CaseinKinase1__(_beta_trcp)@c1 fRate28() #Modifiers(s37, s304)
	r86_products_1: 0  -> ADP()@c1 fRate28() #Modifiers(s37, s304)
	r86_products_2: 0  -> ADP()@c1 fRate28() #Modifiers(s37, s304)
	r86_products_3: 0  -> ADP()@c1 fRate28() #Modifiers(s37, s304)
end reaction rules
end model
