###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000411', 'http://identifiers.org/biomodels.db/MODEL1201130000']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/23729908']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/3055']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0060086']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 10 molecules and 13 reactions. The translated model has 4 molecules and 17 rules'
###
begin model
begin parameters
	T 291.0
	parameter_1 1.0
	parameter_2 0.5
	parameter_3 8.31447
	parameter_4 10.0
	parameter_5 24.0
	parameter_8 1.0
	parameter_9 60000.0
	parameter_10 67000.0
	r1_v 0.100000
	r2_v 2.600000
	r2_k 0.400000
	r2_h 2.000000
	r3_v 3.000000
	r3_Km 2.000000
	r4_v 2.200000
	r4_Km 0.200000
	r5_v 1.500000
	r5_Km 1.400000
	r6_v 5.000000
	r7_v 19.000000
	r7_E 67000.000000
	r8_v 10.000000
	r8_a 2.000000
	r10_v 30.000000
	r10_E 67000.000000
	r10_Km 2.000000
	r11_v 20.000000
	r11_E 67000.000000
	r11_Km 4.000000
	r13_E 67000.000000
	r13_Km 1.000000
end parameters
begin molecule types
	#^ bqbiol:isVersionOf uniprot:A8J6K7
	C_3_pre()
	#^ bqbiol:isVersionOf uniprot:A8J2S3
	C1(_mrna~_MRNA~0,_phos~_PHOS~0)
	#^ bqbiol:isVersionOf uniprot:A8J6K7
	C_3(C3_mRNA~C3_mRNA~0,_p~_P~0,c1c3complex~c1c3complex~0,junk~junk~0)
	#^ bqbiol:encodes uniprot:A8J6K7
	C3_Gene()
end molecule types
begin seed species
	$C3_Gene() 602200000000000.1 # (1.0 * 1e-09)mol/L * 6.022e23/mol *1.0L #C3_Gene #s2
	C_3(C3_mRNA~C3_mRNA,_p~0,c1c3complex~0,junk~0) 602200000000000.1 #original 1.0substance/L #C3_mRNA #s9
	C_3(C3_mRNA~0,_p~0,c1c3complex~0,junk~0) 602200000000000.1 #original 1.0substance/L #C_3 #s10
	C_3(C3_mRNA~0,_p~_P,c1c3complex~0,junk~0) 602200000000000.1 #original 1.0substance/L #C_3_P #s11
	$C_3_pre() 602200000000000.1 #original 1.0substance/L #C_3_pre #s13
	C1(_mrna~0,_phos~0) 602200000000000.1 #original 1.0substance/L #C1 #species_1
	$C1(_mrna~_MRNA,_phos~0) 602200000000000.1 #original 1.0substance/L #C1_mRNA #species_2
	C1(_mrna~0,_phos~_PHOS) 602200000000000.1 #original 1.0substance/L #C1_phos #species_3
	C_3(C3_mRNA~0,_p~0,c1c3complex~c1c3complex,junk~0) 602200000000000.1 #original 1.0substance/L #c1c3complex #species_4
	C_3(C3_mRNA~0,_p~0,c1c3complex~0,junk~junk) 602200000000000.1 #original 1.0substance/L #junk #species_12
end seed species
begin observables
	Species C3_Gene C3_Gene() #C3_Gene
	Species C3_mRNA C_3(C3_mRNA~C3_mRNA,_p~0,c1c3complex~0,junk~0) #C3_mRNA
	Species C_3 C_3(C3_mRNA~0,_p~0,c1c3complex~0,junk~0) #C_3
	Species C_3_P C_3(C3_mRNA~0,_p~_P,c1c3complex~0,junk~0) #C_3_P
	Species C_3_pre C_3_pre() #C_3_pre
	Species C1 C1(_mrna~0,_phos~0) #C1
	Species C1_mRNA C1(_mrna~_MRNA,_phos~0) #C1_mRNA
	Species C1_phos C1(_mrna~0,_phos~_PHOS) #C1_phos
	Species c1c3complex C_3(C3_mRNA~0,_p~0,c1c3complex~c1c3complex,junk~0) #c1c3complex
	Species junk C_3(C3_mRNA~0,_p~0,c1c3complex~0,junk~junk) #junk
end observables
begin functions
	parameter_7() = 84000
	parameter_6() = 50000
	T2() = parameter_4*sin(6.283185307*time()/parameter_5)/2 + 296
	fRate0() = 0.1*exp(parameter_6*(-T + T2)/(T*T2*parameter_3))
	fRate1() = 2.6*exp(parameter_7*(-T + T2)/(T*T2*parameter_3))/(C_3_P^2.0 + 0.4)
	fRate2() = 3.0*exp(parameter_6*(-T + T2)/(T*T2*parameter_3))/(C3_mRNA + 2.0)
	fRate3() = 2.2*exp(parameter_6*(-T + T2)/(T*T2*parameter_3))/(C_3 + 0.2)
	fRate4() = 1.5*exp(parameter_6*(-T + T2)/(T*T2*parameter_3))/(C_3_P + 1.4)
	fRate5() = 5.0*C3_mRNA*exp(parameter_7*(-T + T2)/(T*T2*parameter_3))
	fRate6() = 19.0*exp((-67000.0*T + 67000.0*T2)/(T*T2*parameter_3))
	fRate7() = 10.0*C1_phos*C_3_P^2.0*exp(parameter_7*(-T + T2)/(T*T2*parameter_3))
	fRate8() = parameter_1*exp(parameter_9*(-T + T2)/(T*T2*parameter_3))
	fRate9() = 30.0*exp((-67000.0*T + 67000.0*T2)/(T*T2*parameter_3))/(C1 + 2.0)
	fRate10() = 20.0*exp((-67000.0*T + 67000.0*T2)/(T*T2*parameter_3))/(c1c3complex + 4.0)
	fRate11() = parameter_2*exp(parameter_10*(-T + T2)/(T*T2*parameter_3))
	fRate12() = parameter_8*exp((-67000.0*T + 67000.0*T2)/(T*T2*parameter_3))/(C1_phos + 1.0)
end functions
begin reaction rules
	re12: C_3(C3_mRNA~0,_p~0,c1c3complex~0,junk~0) -> C_3(C3_mRNA~0,_p~_P,c1c3complex~0,junk~0) fRate0()
	re13_reactants_0: 0  -> C3_Gene() -1*(fRate1()) #Modifiers(s11)
	re13_products_0: 0  -> C_3(C3_mRNA~C3_mRNA,_p~0,c1c3complex~0,junk~0) fRate1() #Modifiers(s11)
	re14: C_3(C3_mRNA~C3_mRNA,_p~0,c1c3complex~0,junk~0) -> C_3(C3_mRNA~0,_p~0,c1c3complex~0,junk~junk) fRate2()
	re15: C_3(C3_mRNA~0,_p~0,c1c3complex~0,junk~0) -> C_3(C3_mRNA~0,_p~0,c1c3complex~0,junk~junk) fRate3()
	re16: C_3(C3_mRNA~0,_p~_P,c1c3complex~0,junk~0) -> C_3(C3_mRNA~0,_p~0,c1c3complex~0,junk~junk) fRate4()
	re18_reactants_0: 0  -> C_3_pre() -1*(fRate5()) #Modifiers(s9)
	re18_products_0: 0  -> C_3(C3_mRNA~0,_p~0,c1c3complex~0,junk~0) fRate5() #Modifiers(s9)
	reaction_1: C1(_mrna~_MRNA,_phos~0) -> C1(_mrna~0,_phos~0) fRate6()
	reaction_2_reactants_0: 0  -> C1(_mrna~0,_phos~_PHOS) -1*(fRate7())
	reaction_2_reactants_1: 0  -> C_3(C3_mRNA~0,_p~_P,c1c3complex~0,junk~0) -1*(fRate7())
	reaction_2_products_0: 0  -> C_3(C3_mRNA~0,_p~0,c1c3complex~c1c3complex,junk~0) fRate7()
	reaction_3: C1(_mrna~0,_phos~0) -> C1(_mrna~0,_phos~_PHOS) fRate8()
	reaction_4: C1(_mrna~0,_phos~0) -> C_3(C3_mRNA~0,_p~0,c1c3complex~0,junk~junk) fRate9()
	reaction_5: C_3(C3_mRNA~0,_p~0,c1c3complex~c1c3complex,junk~0) -> C_3(C3_mRNA~0,_p~0,c1c3complex~0,junk~junk) fRate10()
	reaction_6: C1(_mrna~0,_phos~_PHOS) -> C1(_mrna~0,_phos~0) fRate11()
	reaction_7: C1(_mrna~0,_phos~_PHOS) -> C_3(C3_mRNA~0,_p~0,c1c3complex~0,junk~junk) fRate12()
end reaction rules
end model
