###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000415', 'http://identifiers.org/biomodels.db/MODEL1203230000']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/21535565']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0019372']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/3847']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 10 molecules and 5 reactions. The translated model has 8 molecules and 21 rules'
###
begin model
begin parameters
	parameter_1 0.49
	parameter_2 0.00825
	parameter_3 0.49
	parameter_4 0.039
	parameter_5 0.49
	parameter_6 0.00255
	parameter_7 0.05
	parameter_8 0.285
end parameters
begin molecule types
	#^ bqbiol:isVersionOf chebi:CHEBI:17351
	LA()
	#^ bqbiol:hasVersion chebi:CHEBI:35923
	s9HOD_S__E_E__()
	#^ bqbiol:hasVersion chebi:CHEBI:35923
	s9HOD_R__E_E__()
	#^ bqbiol:hasVersion chebi:CHEBI:35923
	s13HOD_R__E_E__()
	#^ bqbiol:hasVersion chebi:CHEBI:35923
	s9HOD_S__Z_E__()
	#^ bqbiol:isVersionOf pubchem.compound:6184
	nHexanal(s13HOD_R__Z_E__~s13HOD_R__Z_E__~0,s13HOD_S__Z_E__~s13HOD_S__Z_E__~0)
	#^ bqbiol:hasVersion chebi:CHEBI:35923
	s9HOD_R__Z_E__()
	#^ bqbiol:hasVersion chebi:CHEBI:35923
	s13HOD_S__E_E__()
end molecule types
begin seed species
	LA() 4.0347398057045784e+16 # (6.69999967735732e-05 * 0.001)mol/L * 6.022e23/mol *1.0L #LA #species_1
end seed species
begin observables
	Species LA LA() #LA
	Species s13HOD_S__Z_E__ nHexanal(s13HOD_R__Z_E__~0,s13HOD_S__Z_E__~s13HOD_S__Z_E__) #13HOD-S(Z,E)
	Species s13HOD_R__Z_E__ nHexanal(s13HOD_R__Z_E__~s13HOD_R__Z_E__,s13HOD_S__Z_E__~0) #13HOD-R(Z,E)
	Species s13HOD_S__E_E__ s13HOD_S__E_E__() #13HOD-S(E,E)
	Species s13HOD_R__E_E__ s13HOD_R__E_E__() #13HOD-R(E,E)
	Species s9HOD_S__Z_E__ s9HOD_S__Z_E__() #9HOD-S(Z,E)
	Species s9HOD_R__Z_E__ s9HOD_R__Z_E__() #9HOD-R(Z,E)
	Species s9HOD_S__E_E__ s9HOD_S__E_E__() #9HOD-S(E,E)
	Species s9HOD_R__E_E__ s9HOD_R__E_E__() #9HOD-R(E,E)
	Species nHexanal nHexanal(s13HOD_R__Z_E__~0,s13HOD_S__Z_E__~0) #nHexanal
end observables
begin functions
	parameter_9() = 0.135*parameter_8
	fRate0() = parameter_2/(LA + parameter_1)
	fRate1() = LA*parameter_4/(LA + parameter_3)
	fRate2() = LA*parameter_6/(LA + parameter_5)
	fRate3() = parameter_8/(parameter_7 + s13HOD_S__Z_E__)
	fRate4() = parameter_9/(parameter_7 + s13HOD_R__Z_E__)
end functions
begin reaction rules
	reaction_1: LA() -> nHexanal(s13HOD_R__Z_E__~0,s13HOD_S__Z_E__~s13HOD_S__Z_E__) + nHexanal(s13HOD_R__Z_E__~s13HOD_R__Z_E__,s13HOD_S__Z_E__~0) + s13HOD_S__E_E__() + s13HOD_R__E_E__() + s9HOD_S__Z_E__() + s9HOD_R__Z_E__() + s9HOD_S__E_E__() + s9HOD_R__E_E__() fRate0()
	reaction_2_reactants_0: 0  -> LA() -1*(fRate1())
	reaction_2_products_0: 0  -> nHexanal(s13HOD_R__Z_E__~0,s13HOD_S__Z_E__~s13HOD_S__Z_E__) 0.751*fRate1()
	reaction_2_products_1: 0  -> nHexanal(s13HOD_R__Z_E__~s13HOD_R__Z_E__,s13HOD_S__Z_E__~0) 0.023*fRate1()
	reaction_2_products_2: 0  -> s13HOD_S__E_E__() 0.025*fRate1()
	reaction_2_products_3: 0  -> s13HOD_R__E_E__() 0.015*fRate1()
	reaction_2_products_4: 0  -> s9HOD_S__Z_E__() 0.127*fRate1()
	reaction_2_products_5: 0  -> s9HOD_R__Z_E__() 0.026*fRate1()
	reaction_2_products_6: 0  -> s9HOD_S__E_E__() 0.018*fRate1()
	reaction_2_products_7: 0  -> s9HOD_R__E_E__() 0.016*fRate1()
	reaction_3_reactants_0: 0  -> LA() -1*(fRate2())
	reaction_3_products_0: 0  -> nHexanal(s13HOD_R__Z_E__~0,s13HOD_S__Z_E__~s13HOD_S__Z_E__) 0.068*fRate2()
	reaction_3_products_1: 0  -> nHexanal(s13HOD_R__Z_E__~s13HOD_R__Z_E__,s13HOD_S__Z_E__~0) 0.059*fRate2()
	reaction_3_products_2: 0  -> s13HOD_S__E_E__() 0.136*fRate2()
	reaction_3_products_3: 0  -> s13HOD_R__E_E__() 0.107*fRate2()
	reaction_3_products_4: 0  -> s9HOD_S__Z_E__() 0.218*fRate2()
	reaction_3_products_5: 0  -> s9HOD_R__Z_E__() 0.218*fRate2()
	reaction_3_products_6: 0  -> s9HOD_S__E_E__() 0.098*fRate2()
	reaction_3_products_7: 0  -> s9HOD_R__E_E__() 0.097*fRate2()
	reaction_4: nHexanal(s13HOD_R__Z_E__~0,s13HOD_S__Z_E__~s13HOD_S__Z_E__) -> nHexanal(s13HOD_R__Z_E__~0,s13HOD_S__Z_E__~0) fRate3()
	reaction_5: nHexanal(s13HOD_R__Z_E__~s13HOD_R__Z_E__,s13HOD_S__Z_E__~0) -> nHexanal(s13HOD_R__Z_E__~0,s13HOD_S__Z_E__~0) fRate4()
end reaction rules
end model
