###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000417', 'http://identifiers.org/biomodels.db/MODEL1203010003']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/22531117']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/4932']
#@BQB_IS_VERSION_OF:['http://identifiers.org/obo.go/GO:0006355']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 1 molecules and 2 reactions. The translated model has 1 molecules and 2 rules'
###
begin model
begin parameters
	Kd 1e-05
	Ksp 0.001
	P 40.0
	h 2.0
	k0 0.1
	ka 40.0
	ks 10.0
	ku 0.1
	s 1000.0
	r2___RATE__ 0.100000
end parameters
begin molecule types
	Target()
end molecule types
begin seed species
	Target() 10.0 #Target #Target
end seed species
begin observables
	Species Target Target() #Target
end observables
begin functions
	dspksp() = Ksp*(-((1 + (P + s)/Ksp)^2 - 4*P*s/Ksp^2)^0.5 + 1 + (P + s)/Ksp)/2
	dspspkd() = Kd*(-((1 + 2*dspksp/Kd)^2 - 4*dspksp^2/Kd^2)^0.5 + 1 + 2*dspksp/Kd)/2
	fRate0() = ks*(k0 + (dspspkd/ka)^h)/((dspspkd/ka)^h + 1.0)
end functions
begin reaction rules
	___r1: 0  -> Target() fRate0()
	___r2: Target() -> 0  r2___RATE__
end reaction rules
end model
