###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000459', 'http://identifiers.org/biomodels.db/MODEL1302080001']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/22511268']
#@BQB_HAS_PROPERTY:['http://identifiers.org/go/GO:0030162']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/1423']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 4 molecules and 3 reactions. The translated model has 3 molecules and 4 rules'
###
begin model
begin parameters
	kbd 0.0164812
	kbs 100.0
	kxd 1.08559e-09
	kxs 9.32517e-08
	kzd 1.34615e-07
	kzs 9.03538e-07
	kzx 0.00317772
end parameters
begin molecule types
	#^ bqbiol:is chebi:CHEBI:61448
	IPTG(sigb~sigb~0)
	#^ bqbiol:is chebi:CHEBI:35222
	x()
	#^ bqbiol:is go:GO:0015925
	lacz()
end molecule types
begin seed species
	$IPTG(sigb~0) 6.022e+25 # 100.0mol/L * 6.022e23/mol *1.0L #IPTG #IPTG
end seed species
begin observables
	Species IPTG IPTG(sigb~0) #IPTG
	Species sigb IPTG(sigb~sigb) #sigb
	Species lacz lacz() #lacz
	Species x x() #x
end observables
begin functions
	fRate1() = kzs*sigb - lacz*(kzd + kzx*x)
end functions
begin reaction rules
	v1: IPTG(sigb~0) <-> IPTG(sigb~sigb) kbs,kbd #Modifiers(IPTG, sigb)
	v2_reactants_0: 0  -> IPTG(sigb~sigb) -1*(fRate1()) #Modifiers(x, sigb, lacz, x)
	v2_products_0: 0  -> lacz() fRate1() #Modifiers(x, sigb, lacz, x)
	v3: IPTG(sigb~sigb) <-> x() kxs,kxd #Modifiers(sigb, x)
end reaction rules
end model
