###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1307270000', 'http://identifiers.org/biomodels.db/BIOMD0000000463']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/22593159']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/pubmed/9894006']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046', 'http://identifiers.org/doid/DOID:8469']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0019058', 'http://identifiers.org/go/GO:0009814', 'http://identifiers.org/go/GO:0046718']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/40674', 'http://identifiers.org/taxonomy/11320']
#@creatorEmail:'juty@ebi.ac.uk'
#@creatorName:'Juty Nick'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 39 molecules and 50 reactions. The translated model has 33 molecules and 64 rules'
###
begin model
begin parameters
	parameter_1 0.0809
	parameter_2 0.000455
	parameter_5 4.8
	parameter_6 3.21
	parameter_8 6.0
	parameter_9 64800.0
	parameter_10 13.86
	parameter_11 1.38
	parameter_12 1.0
	parameter_13 0.000301
	parameter_14 1.39e-06
	parameter_15 1e-06
	parameter_17 1.0
	parameter_18 0.0037
	parameter_19 36.36
	parameter_20 0.09
	parameter_21 0.33
	parameter_22 4.25
	parameter_23 0.51
	parameter_24 160.0
	parameter_25 0.02
	parameter_26 0.125
	parameter_30 2320.0
	parameter_31 2320.0
	parameter_32 2211.0
	parameter_33 1757.0
	parameter_34 1540.0
	parameter_35 1392.0
	parameter_36 1005.0
	parameter_37 868.0
	parameter_38 250000.0
	parameter_47 0.0113
	parameter_48 8.33e-05
	r34_KmB 450.000000
	r34_KmC 5000.000000
	r34_KmD 10000.000000
	r34_KmE 1000.000000
	r34_KmF 30000.000000
	r34_KmG 400.000000
	r34_KmH 1650.000000
end parameters
begin molecule types
	Rm2()
	#^ bqbiol:isVersionOf go:GO:0039654
	#^ bqbiol:hasPart go:GO:0036338, go:GO:0010008
	Vfus()
	#^ bqbiol:isVersionOf uniprot:P16511
	P_Pb1()
	Rm4()
	#^ bqbiol:isVersionOf uniprot:P03466
	P_Np()
	#^ bqbiol:isVersionOf go:GO:0019022, go:GO:0001172
	Rc()
	#^ bqbiol:occursIn go:GO:0005634
	#^ bqbiol:hasPart uniprot:P05777, go:GO:0030529
	VpNucM1(p_nep)
	#^ bqbiol:occursIn go:GO:0005737
	#^ bqbiol:isVersionOf go:GO:0030529
	VpCyt(VpNuc~VpNuc~0)
	#^ bqbiol:isVersionOf go:GO:0019062
	#^ bqbiol:hasPart go:GO:0019012
	VattLo()
	#^ bqbiol:occursIn go:GO:0005576
	#^ bqbiol:isVersionOf go:GO:0019012
	Vex()
	#^ bqbiol:hasPart chebi:CHEBI:26667
	Bhi()
	#^ bqbiol:hasPart go:GO:0019022, go:GO:0031381
	RvRdrp()
	Rm5()
	Rm7()
	#^ bqbiol:isVersionOf uniprot:P03437
	P_Ha()
	#^ bqbiol:isVersionOf uniprot:P63231
	P_M2()
	#^ bqbiol:isVersionOf uniprot:P06820
	P_Na()
	Rm8()
	Rm3()
	#^ bqbiol:isVersionOf uniprot:P03508
	P_Nep(vpnucm1)
	#^ bqbiol:isVersionOf uniprot:P15659
	P_Pa()
	#^ bqbiol:isVersionOf go:GO:0030529
	Cp()
	#^ bqbiol:isVersionOf go:GO:0019062
	#^ bqbiol:hasPart go:GO:0019012
	VattHi()
	#^ bqbiol:isVersionOf go:GO:0019012
	Vrel()
	#^ bqbiol:isVersionOf uniprot:P05777
	P_M1()
	#^ bqbiol:isVersionOf uniprot:P03427
	P_Pb2()
	#^ bqbiol:isPartOf taxonomy:211044
	Rv()
	Rm1()
	#^ bqbiol:isVersionOf go:GO:0031381
	P_Rdrp()
	Blo()
	#^ bqbiol:hasPart go:GO:0019022, go:GO:0031381
	RcRdrp()
	Rm6()
	#^ bqbiol:occursIn go:GO:0005768
	#^ bqbiol:isVersionOf go:GO:0019012
	Ven()
end molecule types
begin seed species
	Bhi() 9.033e+25 # 150.0mol/L * 6.022e23/mol *1.0L #Bhi #species_1
	Vex() 6.022e+24 #original 10.0substance/volume #Vex #species_3
	Blo() 6.0220000000000006e+26 #original 1000.0substance/volume #Blo #species_4
end seed species
begin observables
	Species Bhi Bhi() #Bhi
	Species VattHi VattHi() #VattHi
	Species Vex Vex() #Vex
	Species Blo Blo() #Blo
	Species VattLo VattLo() #VattLo
	Species Ven Ven() #Ven
	Species Vfus Vfus() #Vfus
	Species VpCyt VpCyt(VpNuc~0) #VpCyt
	Species VpNuc VpCyt(VpNuc~VpNuc) #VpNuc
	Species Rc Rc() #Rc
	Species P_Rdrp P_Rdrp() #P_Rdrp
	Species RcRdrp RcRdrp() #RcRdrp
	Species P_Np P_Np() #P_Np
	Species P_M1 P_M1() #P_M1
	Species VpNucM1 VpNucM1(p_nep) #VpNucM1
	Species VpCytM1 VpNucM1(p_nep!805).P_Nep(vpnucm1!805) #VpCytM1
	Species Cp Cp() #Cp
	Species Rv Rv() #Rv
	Species RvRdrp RvRdrp() #RvRdrp
	Species Rm1 Rm1() #Rm1
	Species Rm2 Rm2() #Rm2
	Species Rm3 Rm3() #Rm3
	Species Rm4 Rm4() #Rm4
	Species Rm5 Rm5() #Rm5
	Species Rm6 Rm6() #Rm6
	Species Rm7 Rm7() #Rm7
	Species Rm8 Rm8() #Rm8
	Species P_Pb1 P_Pb1() #P_Pb1
	Species P_Pb2 P_Pb2() #P_Pb2
	Species P_Pa P_Pa() #P_Pa
	Species P_Nep P_Nep(vpnucm1) #P_Nep
	Species P_Ha P_Ha() #P_Ha
	Species P_Na P_Na() #P_Na
	Species P_M2 P_M2() #P_M2
	Species Vrel Vrel() #Vrel
end observables
begin functions
	totalcRNA_ar() = Cp + Rc + RcRdrp
	totalcRNAofasegment_ar() = totalcRNA_ar/8
	totalvRNA_ar() = Rv + RvRdrp + 8*VattHi + 8*VattLo + 8*Ven + VpCyt + VpCytM1 + VpNuc + VpNucM1
	totalvRNAofasegment_ar() = totalvRNA_ar/8
	parameter_45() = parameter_38/(8*parameter_36)
	parameter_29() = parameter_26*parameter_9/parameter_24
	parameter_28() = parameter_25*parameter_9/parameter_24
	parameter_42() = parameter_38/(8*parameter_33)
	parameter_39() = parameter_38/(8*parameter_30)
	parameter_41() = parameter_38/(8*parameter_32)
	parameter_40() = parameter_38/(8*parameter_31)
	parameter_46() = parameter_38/(8*parameter_37)
	parameter_27() = parameter_9*(1 - parameter_25)/parameter_24
	parameter_44() = parameter_38/(8*parameter_35)
	parameter_43() = parameter_38/(8*parameter_34)
	parameter_7() = parameter_6*(1 - parameter_23)/parameter_23
	parameter_4() = parameter_2/parameter_48
	parameter_3() = parameter_1/parameter_47
	parameter_16() = parameter_9/parameter_24
	fRate9() = P_Np*RcRdrp*parameter_13
	fRate10() = P_M1*VpNuc*parameter_14
	fRate14() = P_Np*RvRdrp*parameter_13
	fRate33() = P_Ha*P_M1*P_M2*P_Na*P_Nep*P_Np*P_Rdrp*VpCytM1*parameter_18/((P_Ha + 5000.0)*(P_M1 + 30000.0)*(P_M2 + 400.0)*(P_Na + 1000.0)*(P_Nep + 1650.0)*(P_Np + 10000.0)*(P_Rdrp + 450.0))
end functions
begin reaction rules
	reaction_1: Vex() + Bhi() <-> VattHi() parameter_1,parameter_3 #Modifiers(species_3, species_1, species_2)
	reaction_2: Vex() + Blo() <-> VattLo() parameter_2,parameter_4 #Modifiers(species_3, species_4, species_5)
	reaction_3: VattHi() -> Ven() + Bhi() parameter_5 #Modifiers(species_2)
	reaction_4: VattLo() -> Ven() + Blo() parameter_5 #Modifiers(species_5)
	reaction_5: Ven() -> Vfus() + VpCyt(VpNuc~0) + VpCyt(VpNuc~0) + VpCyt(VpNuc~0) + VpCyt(VpNuc~0) + VpCyt(VpNuc~0) + VpCyt(VpNuc~0) + VpCyt(VpNuc~0) + VpCyt(VpNuc~0) parameter_6 #Modifiers(species_6)
	reaction_6: Ven() -> 0  parameter_7 #Modifiers(species_6)
	reaction_7: VpCyt(VpNuc~0) -> VpCyt(VpNuc~VpNuc) parameter_8 #Modifiers(species_8)
	reaction_8: VpCyt(VpNuc~VpNuc) -> VpCyt(VpNuc~VpNuc) + Rc() parameter_11 #Modifiers(species_9)
	reaction_9: Rc() + P_Rdrp() -> RcRdrp() parameter_12 #Modifiers(species_10, species_11)
	reaction_10_reactants_0: 0  -> RcRdrp() -1*(fRate9()) #Modifiers(species_12, species_13)
	reaction_10_reactants_1: 0  -> P_Np() -1*71.0*(fRate9()) #Modifiers(species_12, species_13)
	reaction_10_products_0: 0  -> Cp() fRate9() #Modifiers(species_12, species_13)
	reaction_11_reactants_0: 0  -> VpCyt(VpNuc~VpNuc) -1*(fRate10()) #Modifiers(species_9, species_14)
	reaction_11_reactants_1: 0  -> P_M1() -1*8.5*(fRate10()) #Modifiers(species_9, species_14)
	reaction_11_products_0: 0  -> VpNucM1(p_nep) fRate10() #Modifiers(species_9, species_14)
	reaction_12: VpNucM1(p_nep) + P_Nep(vpnucm1) -> VpNucM1(p_nep!805).P_Nep(vpnucm1!805) parameter_15 #Modifiers(species_15, species_31)
	reaction_13: Cp() -> Cp() + Rv() parameter_10 #Modifiers(species_17)
	reaction_14: Rv() + P_Rdrp() -> RvRdrp() parameter_12 #Modifiers(species_18, species_11)
	reaction_15_reactants_0: 0  -> RvRdrp() -1*(fRate14()) #Modifiers(species_19, species_13)
	reaction_15_reactants_1: 0  -> P_Np() -1*71.0*(fRate14()) #Modifiers(species_19, species_13)
	reaction_15_products_0: 0  -> VpCyt(VpNuc~VpNuc) fRate14() #Modifiers(species_19, species_13)
	reaction_16: VpCyt(VpNuc~VpNuc) -> VpCyt(VpNuc~VpNuc) + Rm1() parameter_39 #Modifiers(species_9)
	reaction_17: VpCyt(VpNuc~VpNuc) -> VpCyt(VpNuc~VpNuc) + Rm2() parameter_40 #Modifiers(species_9)
	reaction_18: VpCyt(VpNuc~VpNuc) -> VpCyt(VpNuc~VpNuc) + Rm3() parameter_41 #Modifiers(species_9)
	reaction_19: VpCyt(VpNuc~VpNuc) -> VpCyt(VpNuc~VpNuc) + Rm4() parameter_42 #Modifiers(species_9)
	reaction_20: VpCyt(VpNuc~VpNuc) -> VpCyt(VpNuc~VpNuc) + Rm5() parameter_43 #Modifiers(species_9)
	reaction_21: VpCyt(VpNuc~VpNuc) -> VpCyt(VpNuc~VpNuc) + Rm6() parameter_44 #Modifiers(species_9)
	reaction_22: VpCyt(VpNuc~VpNuc) -> VpCyt(VpNuc~VpNuc) + Rm7() parameter_45 #Modifiers(species_9)
	reaction_23: VpCyt(VpNuc~VpNuc) -> VpCyt(VpNuc~VpNuc) + Rm8() parameter_46 #Modifiers(species_9)
	reaction_24: Rm2() -> Rm2() + P_Pb1() parameter_16 #Modifiers(species_21)
	reaction_25: Rm1() -> Rm1() + P_Pb2() parameter_16 #Modifiers(species_20)
	reaction_26: Rm3() -> Rm3() + P_Pa() parameter_16 #Modifiers(species_22)
	reaction_27: P_Pb1() + P_Pb2() + P_Pa() -> P_Rdrp() parameter_17 #Modifiers(species_28, species_29, species_30)
	reaction_28: Rm5() -> Rm5() + P_Np() parameter_16 #Modifiers(species_24)
	reaction_29: Rm7() -> Rm7() + P_M1() parameter_27 #Modifiers(species_26)
	reaction_30: Rm8() -> Rm8() + P_Nep(vpnucm1) parameter_29 #Modifiers(species_27)
	reaction_31: Rm4() -> Rm4() + P_Ha() parameter_16 #Modifiers(species_23)
	reaction_32: Rm6() -> Rm6() + P_Na() parameter_16 #Modifiers(species_25)
	reaction_33: Rm7() -> Rm7() + P_M2() parameter_28 #Modifiers(species_26)
	reaction_34_reactants_0: 0  -> VpNucM1(p_nep!805).P_Nep(vpnucm1!805) -1*8.0*(fRate33()) #Modifiers(species_16, species_11, species_32, species_13, species_33, species_14, species_34, species_31)
	reaction_34_reactants_1: 0  -> P_Rdrp() -1*37.0*(fRate33()) #Modifiers(species_16, species_11, species_32, species_13, species_33, species_14, species_34, species_31)
	reaction_34_reactants_2: 0  -> P_Np() -1*433.0*(fRate33()) #Modifiers(species_16, species_11, species_32, species_13, species_33, species_14, species_34, species_31)
	reaction_34_reactants_3: 0  -> P_M1() -1*2932.0*(fRate33()) #Modifiers(species_16, species_11, species_32, species_13, species_33, species_14, species_34, species_31)
	reaction_34_reactants_4: 0  -> P_Nep(vpnucm1) -1*157.0*(fRate33()) #Modifiers(species_16, species_11, species_32, species_13, species_33, species_14, species_34, species_31)
	reaction_34_reactants_5: 0  -> P_Ha() -1*500.0*(fRate33()) #Modifiers(species_16, species_11, species_32, species_13, species_33, species_14, species_34, species_31)
	reaction_34_reactants_6: 0  -> P_Na() -1*100.0*(fRate33()) #Modifiers(species_16, species_11, species_32, species_13, species_33, species_14, species_34, species_31)
	reaction_34_reactants_7: 0  -> P_M2() -1*40.0*(fRate33()) #Modifiers(species_16, species_11, species_32, species_13, species_33, species_14, species_34, species_31)
	reaction_34_products_0: 0  -> Vrel() fRate33() #Modifiers(species_16, species_11, species_32, species_13, species_33, species_14, species_34, species_31)
	reaction_35: VpCyt(VpNuc~VpNuc) -> 0  parameter_20 #Modifiers(species_9)
	reaction_36: Rc() -> 0  parameter_19 #Modifiers(species_10)
	reaction_37: Rv() -> 0  parameter_19 #Modifiers(species_18)
	reaction_38: RcRdrp() -> 0  parameter_22 #Modifiers(species_12)
	reaction_39: RvRdrp() -> 0  parameter_22 #Modifiers(species_19)
	reaction_40: Cp() -> 0  parameter_20 #Modifiers(species_17)
	reaction_41: VpNucM1(p_nep) -> 0  parameter_20 #Modifiers(species_15)
	reaction_42: VpNucM1(p_nep!805).P_Nep(vpnucm1!805) -> 0  parameter_20 #Modifiers(species_16)
	reaction_43: Rm1() -> 0  parameter_21 #Modifiers(species_20)
	reaction_44: Rm2() -> 0  parameter_21 #Modifiers(species_21)
	reaction_45: Rm3() -> 0  parameter_21 #Modifiers(species_22)
	reaction_46: Rm4() -> 0  parameter_21 #Modifiers(species_23)
	reaction_47: Rm5() -> 0  parameter_21 #Modifiers(species_24)
	reaction_48: Rm6() -> 0  parameter_21 #Modifiers(species_25)
	reaction_49: Rm7() -> 0  parameter_21 #Modifiers(species_26)
	reaction_50: Rm8() -> 0  parameter_21 #Modifiers(species_27)
end reaction rules
end model
