###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000466', 'http://identifiers.org/biomodels.db/MODEL1302180005']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/23708369']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0034405', 'http://identifiers.org/go/GO:0006809', 'http://identifiers.org/go/GO:0002537', 'http://identifiers.org/reactome/REACT_12443.3']
#@creatorEmail:'juty@ebi.ac.uk'
#@creatorName:'Juty Nick'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 34 molecules and 28 reactions. The translated model has 17 molecules and 34 rules'
###
begin model
begin parameters
	r1_normal 4.000000
	r1_tf 60.000000
	r1_unity 1.000000
	r1_unimol 1.000000
	r1_tiny_num 0.000001
	r2_normal 0.026000
	r2_tf 540.000000
	r2_unity 1.000000
	r2_unimol 1.000000
	r3_k3 0.100000
	r3_kr3 1.000000
	r4_k4 8.330000
	r4_kr4 5.000000
	r5_k5 60.000000
	r5_kr5 546.000000
	r6_k6 2040.000000
	r6_kr6 15700.000000
	r7_V8 154.000000
	r7_Km8 340.000000
	r8_k7 40.800000
	r9_k25 0.001000
	r10_k24t1 0.000120
	r10_k24t2 0.000009
	r11_k9 0.222000
	r11_Km9 0.181000
	r12_V10 0.289000
	r12_Km10 0.057100
	r13_k11 0.035000
	r13_Km11 10.000000
	r14_Km12 8.000000
	r14_V12 0.125000
	r15_k13 0.005000
	r15_Km13 15.000000
	r16_Km14 15.000000
	r16_V14 0.375000
	r17_k17 0.002000
	r17_Km17 30.000000
	r18_Km18 15.000000
	r18_V18 0.050000
	r19_k26 0.000028
	r20_V27 0.028240
	r20_Km27 16.000000
	r21_unitime 1.000000
	r22_V16 0.375000
	r22_Km16 15.000000
	r23_k15 0.005000
	r23_Km15 15.000000
	r24_V20 0.050000
	r24_Km20 15.000000
	r25_k19 0.002000
	r25_Km19 30.000000
	r26_Km21 25.000000
	r26_k21 0.000040
	r27_Km22 5.000000
	r27_V22 0.002000
	r28_tau 0.550000
	r28_tc 3600.000000
	r28_uc 3600.000000
	r28_delay 5.000000
	r28_unity 20.000000
end parameters
begin compartments
	#volume units: volume
	default 3 1.0
	c1 3 1.0 #Cell
	c3 3 1.0 #nucleus
end compartments
begin molecule types
	s35(_s115~_S115~0,eNOS~eNOS~0)
	#^ bqbiol:hasPart ensembl:ENST00000297494, uniprot:Q03135
	eNOS_Cav_1()
	#^ bqbiol:isVersionOf uniprot:P12931
	Src(p_~P_~0)
	s37()
	#^ bqbiol:isVersionOf uniprot:Q9Y5W3
	#^ bqbiol:encodes uniprot:Q9Y5W3
	KLF2()
	#^ bqbiol:isVersionOf uniprot:P29353
	Shc(fak,grb2_sos,p_~P_~0)
	#^ bqbiol:hasPart chebi:CHEBI:17552, uniprot:P01112
	Ras_GDP(Ras_GTP~Ras_GTP~0)
	#^ bqbiol:isVersionOf uniprot:Q13233
	MEKK1(p_~P_~0)
	KLF2_s105()
	AP_1(a~A~0)
	eNOS_s108()
	pre_time()
	#^ bqbiol:isVersionOf uniprot:O14733
	JNKK(p~P~0,p_~P_~0)
	#^ bqbiol:hasPart uniprot:Q07889, uniprot:P62993
	Grb2_Sos(shc)
	#^ bqbiol:isVersionOf uniprot:P45983
	JNK(p~P~0,p_~P_~0)
	#^ bqbiol:isVersionOf uniprot:Q05397
	FAK(p_~P_~0,shc)
	Time()
end molecule types
begin seed species
	@c1:s37()@c1 10000.0 #s37 #s37
	@c3:AP_1(a~0)@c3 50.0 #AP_1 #s42
	@c1:JNKK(p~P,p_~P_)@c1 0.006 #pp_JNKK #s43
	@c1:KLF2()@c1 10.0 #KLF2 #s49
	@c1:eNOS_Cav_1()@c1 34.98 #eNOS_Cav_1 #s51
	@c1:Shc(fak,grb2_sos,p_~0)@c1 819.25 #Shc #s91
	@c1:Src(p_~P_)@c1 18.0 #p_Src #s92
	@c1:FAK(p_~P_,shc)@c1 0.605 #p_FAK #s93
	@c1:Src(p_~0)@c1 72.0 #Src #s94
	@c1:FAK(p_~0,shc)@c1 57.0 #FAK #s95
	@c1:JNKK(p~0,p_~0)@c1 299.706 #JNKK #s96
	@c1:MEKK1(p_~0)@c1 98.514 #MEKK1 #s97
	@c1:Shc(fak,grb2_sos,p_~P_)@c1 157.162 #p_Shc #s98
	@c1:JNK(p~0,p_~0)@c1 299.997 #JNK #s99
	@c1:JNKK(p~0,p_~P_)@c1 0.288 #p_JNKK #s100
	@c1:MEKK1(p_~P_)@c1 1.486 #p_MEKK1 #s101
	@c1:Ras_GDP(Ras_GTP~Ras_GTP)@c1 0.616 #Ras_GTP #s102
	@c1:Ras_GDP(Ras_GTP~0)@c1 119.384 #Ras_GDP #s103
	@c1:JNK(p~0,p_~P_)@c1 0.003 #p_JNK #s104
	@c1:s35(_s115~0,eNOS~eNOS)@c1 3.214 #eNOS #s106
	@c1:Shc(fak!807,grb2_sos,p_~0)@c1.FAK(p_~P_,shc!807)@c1 0.857 #p_FAK_Shc #s110
	@c1:Grb2_Sos(shc)@c1 3.23 #Grb2_Sos #s111
	@c1:Shc(fak!807,grb2_sos,p_~P_)@c1.FAK(p_~P_,shc!807)@c1 15.962 #p_FAK_p_Shc #s112
	@c1:Shc(fak!807,grb2_sos!808,p_~P_)@c1.FAK(p_~P_,shc!807)@c1.Grb2_Sos(shc!808)@c1 5.577 #p_FAK_p_Shc_Grb2_Sos #s113
	@c1:Shc(fak,grb2_sos!808,p_~P_)@c1.Grb2_Sos(shc!808)@c1 1.193 #p_Shc_Grb2_Sos #s114
	@c3:s35(_s115~_S115,eNOS~eNOS)@c3 0.09 #eNOS_s115 #s115
end seed species
begin observables
	Species s35_c1 @c1:s35(_s115~0,eNOS~0)@c1 #s35
	Species s37_c1 @c1:s37()@c1 #s37
	Species pre_time_c1 @c1:pre_time()@c1 #pre_time
	Species Time_c1 @c1:Time()@c1 #Time
	Species AP_1_c3 @c3:AP_1(a~0)@c3 #AP-1
	Species pp_JNKK_c1 @c1:JNKK(p~P,p_~P_)@c1 #pp-JNKK
	Species pp_JNK_c1 @c1:JNK(p~P,p_~P_)@c1 #pp-JNK
	Species KLF2_c1 @c1:KLF2()@c1 #KLF2
	Species eNOS_Cav_1_c1 @c1:eNOS_Cav_1()@c1 #eNOS-Cav-1
	Species Shc_c1 @c1:Shc(fak,grb2_sos,p_~0)@c1 #Shc
	Species p_Src_c1 @c1:Src(p_~P_)@c1 #p-Src
	Species p_FAK_c1 @c1:FAK(p_~P_,shc)@c1 #p-FAK
	Species Src_c1 @c1:Src(p_~0)@c1 #Src
	Species FAK_c1 @c1:FAK(p_~0,shc)@c1 #FAK
	Species JNKK_c1 @c1:JNKK(p~0,p_~0)@c1 #JNKK
	Species MEKK1_c1 @c1:MEKK1(p_~0)@c1 #MEKK1
	Species p_Shc_c1 @c1:Shc(fak,grb2_sos,p_~P_)@c1 #p-Shc
	Species JNK_c1 @c1:JNK(p~0,p_~0)@c1 #JNK
	Species p_JNKK_c1 @c1:JNKK(p~0,p_~P_)@c1 #p-JNKK
	Species p_MEKK1_c1 @c1:MEKK1(p_~P_)@c1 #p-MEKK1
	Species Ras_GTP_c1 @c1:Ras_GDP(Ras_GTP~Ras_GTP)@c1 #Ras:GTP
	Species Ras_GDP_c1 @c1:Ras_GDP(Ras_GTP~0)@c1 #Ras:GDP
	Species p_JNK_c1 @c1:JNK(p~0,p_~P_)@c1 #p-JNK
	Species KLF2_s105_c1 @c1:KLF2_s105()@c1 #KLF2
	Species eNOS_c1 @c1:s35(_s115~0,eNOS~eNOS)@c1 #eNOS
	Species aAP_1_c3 @c3:AP_1(a~A)@c3 #aAP-1
	Species eNOS_s108_c3 @c3:eNOS_s108()@c3 #eNOS
	Species p_FAK_Shc_c1 @c1:Shc(fak!807,grb2_sos,p_~0)@c1.FAK(p_~P_,shc!807)@c1 #p-FAK:Shc
	Species Grb2_Sos_c1 @c1:Grb2_Sos(shc)@c1 #Grb2:Sos
	Species p_FAK_p_Shc_c1 @c1:Shc(fak!807,grb2_sos,p_~P_)@c1.FAK(p_~P_,shc!807)@c1 #p-FAK:p-Shc
	Species p_FAK_p_Shc_Grb2_Sos_c1 @c1:Shc(fak!807,grb2_sos!808,p_~P_)@c1.FAK(p_~P_,shc!807)@c1.Grb2_Sos(shc!808)@c1 #p-FAK:p-Shc:Grb2:Sos
	Species p_Shc_Grb2_Sos_c1 @c1:Shc(fak,grb2_sos!808,p_~P_)@c1.Grb2_Sos(shc!808)@c1 #p-Shc:Grb2:Sos
	Species eNOS_s115_c3 @c3:s35(_s115~_S115,eNOS~eNOS)@c3 #eNOS
end observables
begin functions
	fRate0() = 4.0*(1.0 - 0.238587157113837*Time_c1^0.35)*(1.0*Time_c1 + 1.0e-6)^(-0.65)*exp(1.0 - 0.238587157113837*Time_c1^0.35)
	fRate1() = 0.026*Time_c1^0.3*(1.0 - 0.000280471096406246*Time_c1^1.3)*exp(1.0 - 0.000280471096406246*Time_c1^1.3)
	fRate3() = 8.33*p_Src_c1
	fRate6() = 154.0/(p_Shc_c1 + 340.0)
	fRate9() = 9.0e-6*KLF2_c1 + 0.00012*aAP_1_c3
	fRate10() = 0.222*p_Shc_Grb2_Sos_c1/(Ras_GDP_c1 + 0.181)
	fRate11() = 0.289/(Ras_GTP_c1 + 0.0571)
	fRate12() = 0.035*Ras_GTP_c1/(MEKK1_c1 + 10.0)
	fRate13() = 0.125/(p_MEKK1_c1 + 8.0)
	fRate14() = 0.005*p_MEKK1_c1/(JNKK_c1 + 15.0)
	fRate15() = 0.375/(p_JNKK_c1 + 15.0)
	fRate16() = 0.002*pp_JNKK_c1/(JNK_c1 + 30.0)
	fRate17() = 0.05/(p_JNK_c1 + 15.0)
	fRate19() = 0.02824*eNOS_c1/(eNOS_c1 + 16.0)
	fRate20() = 1.0
	fRate21() = 0.375/(pp_JNKK_c1 + 15.0)
	fRate22() = 0.005*p_MEKK1_c1/(p_JNKK_c1 + 15.0)
	fRate23() = 0.05/(pp_JNK_c1 + 15.0)
	fRate24() = 0.002*pp_JNKK_c1/(p_JNK_c1 + 30.0)
	fRate25() = 4.0e-5*pp_JNK_c1/(AP_1_c3 + 25.0)
	fRate26() = 0.002/(aAP_1_c3 + 5.0)
	fRate27() = 29.256*exp(2.75 - 0.000152777777777778*Time_c1)/(7200.0*exp(2.75 - 0.000152777777777778*Time_c1) + 3600.0*exp(5.5 - 0.000305555555555556*Time_c1) + 3600.0)
end functions
begin reaction rules
	re102_reactants_0: 0  -> FAK(p_~0,shc)@c1 -1*(fRate0()) #Modifiers(s39, s119, s39)
	re102_products_0: 0  -> FAK(p_~P_,shc)@c1 fRate0() #Modifiers(s39, s119, s39)
	re103_reactants_0: 0  -> Src(p_~0)@c1 -1*(fRate1()) #Modifiers(s39, s119, s39)
	re103_products_0: 0  -> Src(p_~P_)@c1 fRate1() #Modifiers(s39, s119, s39)
	re104: Shc(fak,grb2_sos,p_~0)@c1 + FAK(p_~P_,shc)@c1 <-> Shc(fak!807,grb2_sos,p_~0)@c1.FAK(p_~P_,shc!807)@c1 r3_k3,r3_kr3 #Modifiers(s91, s93, s110)
	re105: Shc(fak!807,grb2_sos,p_~0)@c1.FAK(p_~P_,shc!807)@c1 <-> Shc(fak!807,grb2_sos,p_~P_)@c1.FAK(p_~P_,shc!807)@c1 fRate3(),r4_kr4 #Modifiers(s92, s110, s92, s112)
	re106: Shc(fak!807,grb2_sos,p_~P_)@c1.FAK(p_~P_,shc!807)@c1 + Grb2_Sos(shc)@c1 <-> Shc(fak!807,grb2_sos!808,p_~P_)@c1.FAK(p_~P_,shc!807)@c1.Grb2_Sos(shc!808)@c1 r5_k5,r5_kr5 #Modifiers(s111, s112, s113)
	re107: Shc(fak!807,grb2_sos!808,p_~P_)@c1.FAK(p_~P_,shc!807)@c1.Grb2_Sos(shc!808)@c1 <-> Shc(fak,grb2_sos!808,p_~P_)@c1.Grb2_Sos(shc!808)@c1 + FAK(p_~P_,shc)@c1 r6_k6,r6_kr6 #Modifiers(s113, s93, s114)
	re108: Shc(fak,grb2_sos,p_~P_)@c1 -> Shc(fak,grb2_sos,p_~0)@c1 fRate6() #Modifiers(s98)
	re109: Shc(fak,grb2_sos!808,p_~P_)@c1.Grb2_Sos(shc!808)@c1 -> Shc(fak,grb2_sos,p_~P_)@c1 + Grb2_Sos(shc)@c1 r8_k7 #Modifiers(s114)
	re110: s35(_s115~_S115,eNOS~eNOS)@c3 -> s35(_s115~0,eNOS~eNOS)@c1 r9_k25 #Modifiers(s115)
	re111_reactants_0: 0  -> eNOS_s108()@c3 -1*(fRate9()) #Modifiers(s107, s49, s107, s49)
	re111_products_0: 0  -> s35(_s115~_S115,eNOS~eNOS)@c3 fRate9() #Modifiers(s107, s49, s107, s49)
	re112: Ras_GDP(Ras_GTP~0)@c1 -> Ras_GDP(Ras_GTP~Ras_GTP)@c1 fRate10() #Modifiers(s114, s114, s103)
	re113: Ras_GDP(Ras_GTP~Ras_GTP)@c1 -> Ras_GDP(Ras_GTP~0)@c1 fRate11() #Modifiers(s102)
	re114: MEKK1(p_~0)@c1 -> MEKK1(p_~P_)@c1 fRate12() #Modifiers(s102, s102, s97)
	re115: MEKK1(p_~P_)@c1 -> MEKK1(p_~0)@c1 fRate13() #Modifiers(s101)
	re116: JNKK(p~0,p_~0)@c1 -> JNKK(p~0,p_~P_)@c1 fRate14() #Modifiers(s101, s101, s96)
	re117: JNKK(p~0,p_~P_)@c1 -> JNKK(p~0,p_~0)@c1 fRate15() #Modifiers(s100)
	re118: JNK(p~0,p_~0)@c1 -> JNK(p~0,p_~P_)@c1 fRate16() #Modifiers(s43, s99, s43)
	re119: JNK(p~0,p_~P_)@c1 -> JNK(p~0,p_~0)@c1 fRate17() #Modifiers(s104)
	re120: s35(_s115~0,eNOS~eNOS)@c1 -> s35(_s115~0,eNOS~0)@c1 r19_k26 #Modifiers(s106)
	re121_reactants_0: 0  -> s37()@c1 -1*(fRate19()) #Modifiers(s106, s106)
	re121_products_0: 0  -> eNOS_Cav_1()@c1 fRate19() #Modifiers(s106, s106)
	re122_reactants_0: 0  -> pre_time()@c1 -1*(fRate20())
	re122_products_0: 0  -> Time()@c1 fRate20()
	re123: JNKK(p~P,p_~P_)@c1 -> JNKK(p~0,p_~P_)@c1 fRate21() #Modifiers(s43)
	re124: JNKK(p~0,p_~P_)@c1 -> JNKK(p~P,p_~P_)@c1 fRate22() #Modifiers(s101, s100, s101)
	re125: JNK(p~P,p_~P_)@c1 -> JNK(p~0,p_~P_)@c1 fRate23() #Modifiers(s44)
	re126: JNK(p~0,p_~P_)@c1 -> JNK(p~P,p_~P_)@c1 fRate24() #Modifiers(s43, s104, s43)
	re127: AP_1(a~0)@c3 -> AP_1(a~A)@c3 fRate25() #Modifiers(s44, s44, s42)
	re128: AP_1(a~A)@c3 -> AP_1(a~0)@c3 fRate26() #Modifiers(s107)
	re129_reactants_0: 0  -> KLF2_s105()@c1 -1*(fRate27()) #Modifiers(s39, s39)
	re129_products_0: 0  -> KLF2()@c1 fRate27() #Modifiers(s39, s39)
end reaction rules
end model
