###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1302180006', 'http://identifiers.org/biomodels.db/BIOMD0000000467']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/23708369']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0002537', 'http://identifiers.org/reactome/REACT_12443.3', 'http://identifiers.org/go/GO:0006809']
#@creatorEmail:'juty@ebi.ac.uk'
#@creatorName:'Juty Nick'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 20 molecules and 24 reactions. The translated model has 14 molecules and 25 rules'
###
begin model
begin parameters
	k1 0.004 #units:inv_sec_sub
	k1r 10.3 #units:inv_sec
	k2 0.08 #units:inv_sec_sub
	k2r 1152.0 #units:inv_sec
	k4 0.015 #units:inv_sec_sub
	k3 0.00015 #units:inv_sec_sub
	k3r 1.5 #units:inv_sec
	k10 0.1 #units:inv_sec
	Km10 5.0 #units:substance
	Km10r 20.0 #units:substance
	V10r 4.0 #units:sub_sec
	k6 0.002 #units:inv_sec_sub
	k7 1.5 #units:inv_sec
	kD 9.45e-05 #units:inv_sec
	k5 115.2 #units:inv_sec
	Ca_c 117.2
	pp_AKT_PI3P 1.723
	r12_kCaM 17.000000
	r12_kp 5.000000
	r12_kpCaM 17.000000
end parameters
begin molecule types
	#^ bqbiol:hasProperty psimod:MOD:00696
	#^ bqbiol:hasPart chebi:CHEBI:29108, uniprot:P08238, uniprot:P62158
	Hsp90_p_eNOS_CaM_Ca2()
	#^ bqbiol:isVersionOf chebi:CHEBI:16467
	L_Arg()
	#^ bqbiol:hasPart uniprot:P08238
	Hsp90_eNOS()
	#^ bqbiol:hasPart chebi:CHEBI:29108, uniprot:P08238, uniprot:P62158
	Hsp90_eNOS_CaM_Ca4()
	eNOS_CaM()
	s118(hsp90)
	#^ bqbiol:hasPart chebi:CHEBI:29108, uniprot:P62158
	CaM_Ca2(CaM_Ca4~CaM_Ca4~0,Calmodulin~Calmodulin~0,hsp90)
	#^ bqbiol:hasPart chebi:CHEBI:29108, uniprot:P08238, uniprot:P62158
	Hsp90_eNOS_CaM_Ca2()
	#^ bqbiol:isVersionOf chebi:CHEBI:16480
	NO()
	#^ bqbiol:hasPart chebi:CHEBI:29108, uniprot:P62158
	eNOS_CaM_Ca2()
	#^ bqbiol:isVersionOf uniprot:P08238
	Hsp90(cam_ca2,s118)
	#^ bqbiol:hasPart chebi:CHEBI:29108, uniprot:P62158
	eNOS_CaM_Ca4()
	s117()
	#^ bqbiol:hasPart uniprot:Q03135
	#^ bqbiol:isVersionOf go:GO:0051001
	eNOS_Cav_1(sa49_degraded~sa49_degraded~0)
end molecule types
begin seed species
	eNOS_CaM_Ca4() 0.0415 #eNOS_CaM_Ca4 #s45
	CaM_Ca2(CaM_Ca4~CaM_Ca4,Calmodulin~0,hsp90) 2.827 #CaM_Ca4 #s47
	CaM_Ca2(CaM_Ca4~0,Calmodulin~0,hsp90) 347.52 #CaM_Ca2 #s48
	eNOS_CaM_Ca2() 2.12 #eNOS_CaM_Ca2 #s50
	eNOS_Cav_1(sa49_degraded~0) 34.98 #eNOS_Cav_1 #s51
	CaM_Ca2(CaM_Ca4~0,Calmodulin~Calmodulin,hsp90) 7635.36 #Calmodulin #s52
	Hsp90(cam_ca2,s118) 199987.0 #Hsp90 #s57
	Hsp90_eNOS_CaM_Ca4() 1.037 #Hsp90_eNOS_CaM_Ca4 #s58
	CaM_Ca2(CaM_Ca4~CaM_Ca4,Calmodulin~0,hsp90!810).Hsp90(cam_ca2!810,s118) 0.0089 #Hsp90_p_eNOS_CaM_Ca4 #s60
	Hsp90_eNOS_CaM_Ca2() 10.98 #Hsp90_eNOS_CaM_Ca2 #s61
	Hsp90_p_eNOS_CaM_Ca2() 0.106 #Hsp90_p_eNOS_CaM_Ca2 #s62
	L_Arg() 500000.0 #L_Arg #s63
	Hsp90(cam_ca2,s118!809).s118(hsp90!809) 0.643 #Hsp90_p_eNOS #s65
	Hsp90_eNOS() 0.083 #Hsp90_eNOS #s66
end seed species
begin observables
	Species eNOS_CaM_Ca4 eNOS_CaM_Ca4() #eNOS-CaM-Ca4
	Species CaM_Ca4 CaM_Ca2(CaM_Ca4~CaM_Ca4,Calmodulin~0,hsp90) #CaM-Ca4
	Species CaM_Ca2 CaM_Ca2(CaM_Ca4~0,Calmodulin~0,hsp90) #CaM-Ca2
	Species eNOS_CaM_Ca2 eNOS_CaM_Ca2() #eNOS-CaM-Ca2
	Species eNOS_Cav_1 eNOS_Cav_1(sa49_degraded~0) #eNOS-Cav-1
	Species Calmodulin CaM_Ca2(CaM_Ca4~0,Calmodulin~Calmodulin,hsp90) #Calmodulin
	Species Hsp90 Hsp90(cam_ca2,s118) #Hsp90
	Species Hsp90_eNOS_CaM_Ca4 Hsp90_eNOS_CaM_Ca4() #Hsp90-eNOS-CaM-Ca4
	Species Hsp90_p_eNOS_CaM_Ca4 CaM_Ca2(CaM_Ca4~CaM_Ca4,Calmodulin~0,hsp90!810).Hsp90(cam_ca2!810,s118) #Hsp90-p-eNOS-CaM-Ca4
	Species Hsp90_eNOS_CaM_Ca2 Hsp90_eNOS_CaM_Ca2() #Hsp90-eNOS-CaM-Ca2
	Species Hsp90_p_eNOS_CaM_Ca2 Hsp90_p_eNOS_CaM_Ca2() #Hsp90-p-eNOS-CaM-Ca2
	Species L_Arg L_Arg() #L-Arg
	Species NO NO() #NO
	Species Hsp90_p_eNOS Hsp90(cam_ca2,s118!809).s118(hsp90!809) #Hsp90-p-eNOS
	Species Hsp90_eNOS Hsp90_eNOS() #Hsp90-eNOS
	Species sa49_degraded eNOS_Cav_1(sa49_degraded~sa49_degraded) #sa49_degraded
	Species s117 s117() #s117
	Species s118 s118(hsp90) #s118
end observables
begin functions
	fRate2() = Ca_c*k1
	fRate3() = Ca_c*k2
	fRate4m() = Ca_c*k2
	fRate6m() = Ca_c*k2
	fRate8m() = Ca_c*k2
	fRate9() = k10*pp_AKT_PI3P/(Hsp90_eNOS_CaM_Ca4 + Km10)
	fRate9m() = V10r/(Hsp90_p_eNOS_CaM_Ca4 + Km10r)
	fRate10() = k10*pp_AKT_PI3P/(Hsp90_eNOS_CaM_Ca2 + Km10)
	fRate10m() = V10r/(Hsp90_p_eNOS_CaM_Ca2 + Km10r)
	fRate11() = 17.0*Hsp90_eNOS_CaM_Ca4 + 5.0*Hsp90_p_eNOS + 5.0*Hsp90_p_eNOS_CaM_Ca2 + 17.0*Hsp90_p_eNOS_CaM_Ca4 + 17.0*eNOS_CaM_Ca4
	fRate12() = V10r/(Hsp90_p_eNOS + Km10r)
end functions
begin reaction rules
	re37: eNOS_Cav_1(sa49_degraded~0) + CaM_Ca2(CaM_Ca4~CaM_Ca4,Calmodulin~0,hsp90) -> eNOS_CaM_Ca4() k4 #Modifiers(s47, s51)
	re38: CaM_Ca2(CaM_Ca4~0,Calmodulin~0,hsp90) + eNOS_Cav_1(sa49_degraded~0) <-> eNOS_CaM_Ca2() k3,k3r #Modifiers(s51, s48, s50)
	re41: CaM_Ca2(CaM_Ca4~0,Calmodulin~Calmodulin,hsp90) <-> CaM_Ca2(CaM_Ca4~0,Calmodulin~0,hsp90) fRate2(),k1r #Modifiers(s3, s3, s52, s48)
	re42: CaM_Ca2(CaM_Ca4~0,Calmodulin~0,hsp90) <-> CaM_Ca2(CaM_Ca4~CaM_Ca4,Calmodulin~0,hsp90) fRate3(),k2r #Modifiers(s3, s3, s48, s47)
	re50: eNOS_CaM_Ca4() <-> eNOS_CaM_Ca2() k5,fRate4m() #Modifiers(s3, s45, s3, s50)
	re51: eNOS_CaM_Ca4() + Hsp90(cam_ca2,s118) -> Hsp90_eNOS_CaM_Ca4() k6 #Modifiers(s45, s57)
	re52: Hsp90_eNOS_CaM_Ca4() <-> Hsp90_eNOS_CaM_Ca2() k5,fRate6m() #Modifiers(s3, s58, s3, s61)
	re53: Hsp90_eNOS_CaM_Ca2() -> eNOS_CaM_Ca2() + Hsp90(cam_ca2,s118) k7 #Modifiers(s61)
	re54: CaM_Ca2(CaM_Ca4~CaM_Ca4,Calmodulin~0,hsp90!810).Hsp90(cam_ca2!810,s118) <-> Hsp90_p_eNOS_CaM_Ca2() k5,fRate8m() #Modifiers(s3, s60, s3, s62)
	re55: Hsp90_eNOS_CaM_Ca4() <-> CaM_Ca2(CaM_Ca4~CaM_Ca4,Calmodulin~0,hsp90!810).Hsp90(cam_ca2!810,s118) fRate9(),fRate9m() #Modifiers(s27, s58, s27, s60)
	re56: Hsp90_eNOS_CaM_Ca2() <-> Hsp90_p_eNOS_CaM_Ca2() fRate10(),fRate10m() #Modifiers(s27, s61, s27, s62)
	re69_reactants_0: 0  -> L_Arg() -1*(fRate11()) #Modifiers(s45, s50, s61, s62, s58, s60, s65, s45, s58, s62, s65, s60)
	re69_products_0: 0  -> NO() fRate11() #Modifiers(s45, s50, s61, s62, s58, s60, s65, s45, s58, s62, s65, s60)
	re70: Hsp90(cam_ca2,s118!809).s118(hsp90!809) -> Hsp90_eNOS() fRate12() #Modifiers(s65)
	re71: Hsp90_eNOS() -> eNOS_Cav_1(sa49_degraded~0) + Hsp90(cam_ca2,s118) k7 #Modifiers(s66)
	re72: Hsp90_p_eNOS_CaM_Ca2() <-> Hsp90(cam_ca2,s118!809).s118(hsp90!809) + CaM_Ca2(CaM_Ca4~0,Calmodulin~0,hsp90) k3r,k3 #Modifiers(s62, s65, s48)
	re131: eNOS_Cav_1(sa49_degraded~0) -> eNOS_Cav_1(sa49_degraded~sa49_degraded) kD #Modifiers(s51)
	re132: eNOS_CaM_Ca4() -> s117() + CaM_Ca2(CaM_Ca4~CaM_Ca4,Calmodulin~0,hsp90) kD #Modifiers(s45)
	re133: eNOS_CaM_Ca2() -> s117() + CaM_Ca2(CaM_Ca4~0,Calmodulin~0,hsp90) kD #Modifiers(s50)
	re134: Hsp90_eNOS() -> Hsp90(cam_ca2,s118) + s118(hsp90) kD #Modifiers(s66)
	re135: Hsp90(cam_ca2,s118!809).s118(hsp90!809) -> s118(hsp90) + Hsp90(cam_ca2,s118) kD #Modifiers(s65)
	re136: Hsp90_eNOS_CaM_Ca2() -> Hsp90(cam_ca2,s118) + CaM_Ca2(CaM_Ca4~0,Calmodulin~0,hsp90) kD #Modifiers(s61)
	re137: Hsp90_p_eNOS_CaM_Ca2() -> Hsp90(cam_ca2,s118) + CaM_Ca2(CaM_Ca4~0,Calmodulin~0,hsp90) kD #Modifiers(s62)
	re138: Hsp90_eNOS_CaM_Ca4() -> Hsp90(cam_ca2,s118) + CaM_Ca2(CaM_Ca4~CaM_Ca4,Calmodulin~0,hsp90) kD #Modifiers(s58)
	re139: CaM_Ca2(CaM_Ca4~CaM_Ca4,Calmodulin~0,hsp90!810).Hsp90(cam_ca2!810,s118) -> Hsp90(cam_ca2,s118) + CaM_Ca2(CaM_Ca4~CaM_Ca4,Calmodulin~0,hsp90) kD #Modifiers(s60)
end reaction rules
end model
