###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000468', 'http://identifiers.org/biomodels.db/MODEL1308190000']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/23708369']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/biomodels.db/BIOMD0000000466', 'http://identifiers.org/biomodels.db/BIOMD0000000467', 'http://identifiers.org/biomodels.db/BIOMD0000000465', 'http://identifiers.org/biomodels.db/BIOMD0000000464']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0002537', 'http://identifiers.org/go/GO:0006809']
#@creatorEmail:'juty@ebi.ac.uk'
#@creatorName:'Juty Nick'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 79 molecules and 74 reactions. The translated model has 42 molecules and 89 rules'
###
begin model
begin parameters
	R_T 44000.0 #units:dimensionless
	k1 0.0012 #units:sub_sec
	k2 2.0 #units:inv_sec
	k3 6.64 #units:inv_sec
	k4 5000.0 #units:sub_sec
	k5 1e-10 #units:inv_sec_sub
	k6 0.1 #units:inv_sec_sub
	k7 300.0 #units:inv_sec
	K2 200.0 #units:substance
	K3 150.0 #units:substance
	K4 80.0 #units:substance
	K5 321.0 #units:substance
	K_hi 380.0 #units:substance
	k_CICR 1.0 #units:dimensionless
	B_T 120000.0 #units:substance
	Vc_Vs 3.5 #units:dimensionless
	dot_Vp 1630.0 #units:sub_sec
	dot_Vex 18330.0 #units:sub_sec
	dot_Vhi 4760.0 #units:sub_sec
	dot_q_inpass 6000.0 #units:sub_sec
	dot_q_instim 2500.0 #units:sub_sec
	Cao 100.0 #units:substance
	tau_I 33.0 #units:substance
	tau_II 0.005 #units:substance
	half 0.5 #units:dimensionless
	fracK 7071067.81 #units:substance
	alp 10.0 #units:time
	gam 0.1 #units:time
	k8 7.5e-05 #units:time
	k11 0.004 #units:inv_sec_sub
	k12 10.3 #units:inv_sec
	k13 0.08 #units:inv_sec_sub
	k14 1152.0 #units:inv_sec
	k15 0.015 #units:inv_sec_sub
	k17 0.00015 #units:inv_sec_sub
	k18 1.5 #units:inv_sec
	kp 0.1 #units:inv_sec
	Kmp 5.0 #units:substance
	Kmdp 20.0 #units:substance
	Vdp 4.0 #units:sub_sec
	k90 0.002 #units:inv_sec_sub
	kr90 1.5 #units:inv_sec
	kDD 9.45e-05 #units:inv_sec
	K1 0
	K_CICR 0
	k_CCE 0
	k16 0
	Ca_ex_default 1500000.0
	Ca_ex 1500000.0
	PP2A_c1 150.0
	PP2A 150.0
	PTEN_c1 0.1
	PTEN 0.1
	PDK2_c1 3.0
	PDK2 3.0
	r9_unisec 1.000000
	r22_normal 0.907000
	r22_unity 1.000000
	r22_unimol 1.000000
	r22_tf 15.000000
	r23_k58 0.200000
	r23_Km58 6170.000000
	r24_k59 7.500000
	r24_Km59 80.900000
	r25_k60 0.045000
	r25_kr60 0.089000
	r26_k61 20.000000
	r26_Km61 80000.000000
	r27_k62 20.000000
	r27_Km62 80000.000000
	r28_k63 0.037000
	r28_Km63 8800.000000
	r29_k64 0.040000
	r29_Km64 48000.000000
	r30_k65 0.163000
	r30_Km65 48000.000000
	r31_k66 0.000700
	r32_k67 0.980000
	r33_unitime 1.000000
	r34_K_cam_no 17.000000
	r34_K_p_no 5.000000
	r34_K_pcam_no 17.000000
	r38_normal 4.000000
	r38_tf 60.000000
	r38_unity 1.000000
	r38_unimol 1.000000
	r38_tiny_num 0.000001
	r39_normal 0.026000
	r39_tf 540.000000
	r39_unity 1.000000
	r39_unimol 1.000000
	r40_k105 0.100000
	r40_k_105 1.000000
	r41_kcat_src 8.330000
	r41_k_6 5.000000
	r42_k107 60.000000
	r42_k_107 546.000000
	r43_k108 2040.000000
	r43_k_108 15700.000000
	r44_V10 154.000000
	r44_K10 340.000000
	r45_k9 40.800000
	r46_kT 0.001000
	r47_ktr1 0.000120
	r47_ktr1k2 0.000009
	r47_tr2 0.000003
	r48_k111 0.222000
	r48_K111 0.181000
	r49_V12 0.289000
	r49_K12 0.057100
	r50_k113 0.035000
	r50_K113 10.000000
	r51_K18 8.000000
	r51_V18 0.125000
	r52_k19 0.005000
	r52_K19 15.000000
	r53_K20 15.000000
	r53_V20 0.375000
	r54_k21 0.002000
	r54_K21 30.000000
	r55_K22 15.000000
	r55_V22 0.050000
	r56_kD 0.000028
	r57_kP 0.028240
	r57_K30 16.000000
	r58_unitime 1.000000
	r59_V37 0.375000
	r59_K37 15.000000
	r60_k38 0.005000
	r60_K38 15.000000
	r61_V39 0.050000
	r61_K39 15.000000
	r62_k40 0.002000
	r62_K40 30.000000
	r63_K43 25.000000
	r63_k43 0.000040
	r64_K44 5.000000
	r64_V44 0.002000
	r65_tau 0.550000
	r65_tc 3600.000000
	r65_uc 3600.000000
	r65_delay 5.000000
	r65_unity 20.000000
end parameters
begin compartments
	#volume units: volume
	default 3 1.0
	c1 3 1.0 #Cell
	c2 3 1.0 #ER
	c3 3 1.0 #nucleus
end compartments
begin molecule types
	#^ bqbiol:isVersionOf chebi:CHEBI:18348
	PIP2(PI3P~PI3P~0,akt)
	#^ bqbiol:encodes uniprot:Q9Y5W3, uniprot:Q9Y5W3
	KLF2()
	AP_1(a~A~0)
	s8(IP3~IP3~0)
	Time()
	#^ bqbiol:isVersionOf uniprot:P29353
	Shc(fak,grb2_sos,p_~P_~0)
	s10()
	s37()
	#^ bqbiol:hasPart uniprot:P08238
	Hsp90_eNOS()
	Time_s39()
	pre_time()
	#^ bqbiol:hasPart uniprot:Q03135
	eNOS_Cav_1(sa49_degraded~sa49_degraded~0)
	#^ bqbiol:hasPart chebi:CHEBI:29108, uniprot:P62158
	eNOS_CaM_Ca4()
	#^ bqbiol:isVersionOf uniprot:O14733
	JNKK(p~P~0,p_~P_~0)
	#^ bqbiol:isVersionOf uniprot:P31749
	AKT(p~P~0,p_~P_~0,pip2)
	#^ bqbiol:hasPart chebi:CHEBI:29108, uniprot:P62158, uniprot:P08238
	Hsp90_eNOS_CaM_Ca2()
	#^ bqbiol:hasPart chebi:CHEBI:29108, uniprot:P62158, uniprot:P08238
	#^ bqbiol:hasProperty psimod:MOD:00696
	Hsp90_p_eNOS_CaM_Ca2()
	s35(_s115~_S115~0,ca_b,eNOS~eNOS~0)
	#^ bqbiol:isVersionOf chebi:CHEBI:29108
	Ca_s()
	#^ bqbiol:isVersionOf uniprot:P08238
	Hsp90(ca_b,s118)
	#^ bqbiol:isVersionOf uniprot:Q05397
	FAK(p_~P_~0,shc)
	s11()
	#^ bqbiol:isVersionOf uniprot:P12931
	Src(p_~P_~0)
	#^ bqbiol:hasProperty interpro:IPR000403
	PI3K(p_~P_~0)
	KLF2_s105()
	s117()
	s7()
	#^ bqbiol:isVersionOf uniprot:Q13233
	MEKK1(p_~P_~0)
	s13()
	s3()
	#^ bqbiol:isVersionOf uniprot:O15530
	PDK1(_cyto~_CYTO~0)
	eNOS_s108()
	s5()
	#^ bqbiol:isVersionOf uniprot:P45983
	JNK(p~P~0,p_~P_~0)
	#^ bqbiol:hasPart chebi:CHEBI:17552, uniprot:P01112
	Ras_GDP(Ras_GTP~Ras_GTP~0)
	s118(hsp90)
	L_Arg()
	TimeT()
	#^ bqbiol:hasPart uniprot:Q07889, uniprot:P62993
	Grb2_Sos(shc)
	#^ bqbiol:isVersionOf chebi:CHEBI:16480
	NO()
	s9(Ca_c~Ca_c~0)
	#^ bqbiol:hasPart chebi:CHEBI:29108
	Ca_B(CaM_Ca2~CaM_Ca2~0,CaM_Ca4~CaM_Ca4~0,Calmodulin~Calmodulin~0,hsp90,s35)
end molecule types
begin seed species
	@c2:Ca_s()@c2 2830000.0 #Ca_s #s2
	@c1:s9(Ca_c~Ca_c)@c1 117.2 #Ca_c #s3
	@c1:Ca_B(CaM_Ca2~0,CaM_Ca4~0,Calmodulin~0,hsp90,s35)@c1 3870.0 #Ca_B #s4
	@c1:PDK1(_cyto~0)@c1 0.246 #PDK1 #s14
	@c1:AKT(p~0,p_~0,pip2)@c1 167.616 #AKT #s16
	@c1:PIP2(PI3P~PI3P,akt)@c1 0.345 #PI3P #s17
	@c1:PIP2(PI3P~0,akt)@c1 6967.271 #PIP2 #s19
	@c1:PI3K(p_~P_)@c1 0.03 #p_PI3K #s20
	@c1:PI3K(p_~0)@c1 99.97 #PI3K #s22
	@c1:PDK1(_cyto~_CYTO)@c1 999.754 #PDK1_cyto #s25
	@c1:AKT(p~0,p_~P_,pip2!806)@c1.PIP2(PI3P~PI3P,akt!806)@c1 1.457 #p_AKT_PI3P #s26
	@c1:AKT(p~P,p_~P_,pip2!806)@c1.PIP2(PI3P~PI3P,akt!806)@c1 1.723 #pp_AKT_PI3P #s27
	@c1:AKT(p~0,p_~0,pip2!806)@c1.PIP2(PI3P~PI3P,akt!806)@c1 29.203 #AKT_PI3P #s28
	@c1:s37()@c1 10000.0 #s37 #s37
	@c3:AP_1(a~0)@c3 50.0 #AP_1 #s42
	@c1:JNKK(p~P,p_~P_)@c1 0.006 #pp_JNKK #s43
	@c1:eNOS_CaM_Ca4()@c1 0.0415 #eNOS_CaM_Ca4 #s45
	@c1:Ca_B(CaM_Ca2~0,CaM_Ca4~CaM_Ca4,Calmodulin~0,hsp90,s35)@c1 2.827 #CaM_Ca4 #s47
	@c1:Ca_B(CaM_Ca2~CaM_Ca2,CaM_Ca4~0,Calmodulin~0,hsp90,s35)@c1 347.52 #CaM_Ca2 #s48
	@c1:KLF2()@c1 10.0 #KLF2 #s49
	@c1:Ca_B(CaM_Ca2~CaM_Ca2,CaM_Ca4~0,Calmodulin~0,hsp90,s35!811)@c1.s35(_s115~0,ca_b!811,eNOS~eNOS)@c1 2.12 #eNOS_CaM_Ca2 #s50
	@c1:eNOS_Cav_1(sa49_degraded~0)@c1 34.98 #eNOS_Cav_1 #s51
	@c1:Ca_B(CaM_Ca2~0,CaM_Ca4~0,Calmodulin~Calmodulin,hsp90,s35)@c1 7635.36 #Calmodulin #s52
	@c1:Hsp90(ca_b,s118)@c1 199987.0 #Hsp90 #s57
	@c1:Ca_B(CaM_Ca2~0,CaM_Ca4~CaM_Ca4,Calmodulin~0,hsp90!812,s35!811)@c1.s35(_s115~0,ca_b!811,eNOS~eNOS)@c1.Hsp90(ca_b!812,s118)@c1 1.037 #Hsp90_eNOS_CaM_Ca4 #s58
	@c1:Ca_B(CaM_Ca2~0,CaM_Ca4~CaM_Ca4,Calmodulin~0,hsp90!812,s35)@c1.Hsp90(ca_b!812,s118)@c1 0.0089 #Hsp90_p_eNOS_CaM_Ca4 #s60
	@c1:Hsp90_eNOS_CaM_Ca2()@c1 10.98 #Hsp90_eNOS_CaM_Ca2 #s61
	@c1:Hsp90_p_eNOS_CaM_Ca2()@c1 0.106 #Hsp90_p_eNOS_CaM_Ca2 #s62
	@c1:L_Arg()@c1 500000.0 #L_Arg #s63
	@c1:Hsp90(ca_b,s118!809)@c1.s118(hsp90!809)@c1 0.643 #Hsp90_p_eNOS #s65
	@c1:Hsp90_eNOS()@c1 0.083 #Hsp90_eNOS #s66
	@c1:Shc(fak,grb2_sos,p_~0)@c1 819.25 #Shc #s91
	@c1:Src(p_~P_)@c1 18.0 #p_Src #s92
	@c1:FAK(p_~P_,shc)@c1 0.605 #p_FAK #s93
	@c1:Src(p_~0)@c1 72.0 #Src #s94
	@c1:FAK(p_~0,shc)@c1 57.0 #FAK #s95
	@c1:JNKK(p~0,p_~0)@c1 299.706 #JNKK #s96
	@c1:MEKK1(p_~0)@c1 98.514 #MEKK1 #s97
	@c1:Shc(fak,grb2_sos,p_~P_)@c1 157.162 #p_Shc #s98
	@c1:JNK(p~0,p_~0)@c1 299.997 #JNK #s99
	@c1:JNKK(p~0,p_~P_)@c1 0.288 #p_JNKK #s100
	@c1:MEKK1(p_~P_)@c1 1.486 #p_MEKK1 #s101
	@c1:Ras_GDP(Ras_GTP~Ras_GTP)@c1 0.616 #Ras_GTP #s102
	@c1:Ras_GDP(Ras_GTP~0)@c1 119.384 #Ras_GDP #s103
	@c1:JNK(p~0,p_~P_)@c1 0.003 #p_JNK #s104
	@c1:s35(_s115~0,ca_b,eNOS~eNOS)@c1 3.214 #eNOS #s106
	@c1:Shc(fak!807,grb2_sos,p_~0)@c1.FAK(p_~P_,shc!807)@c1 0.857 #p_FAK_Shc #s110
	@c1:Grb2_Sos(shc)@c1 3.23 #Grb2_Sos #s111
	@c1:Shc(fak!807,grb2_sos,p_~P_)@c1.FAK(p_~P_,shc!807)@c1 15.962 #p_FAK_p_Shc #s112
	@c1:Shc(fak!807,grb2_sos!808,p_~P_)@c1.FAK(p_~P_,shc!807)@c1.Grb2_Sos(shc!808)@c1 5.577 #p_FAK_p_Shc_Grb2_Sos #s113
	@c1:Shc(fak,grb2_sos!808,p_~P_)@c1.Grb2_Sos(shc!808)@c1 1.193 #p_Shc_Grb2_Sos #s114
	@c3:s35(_s115~_S115,ca_b,eNOS~eNOS)@c3 0.09 #eNOS_s115 #s115
end seed species
begin observables
	Species Ca_s_c2 @c2:Ca_s()@c2 #Ca_s
	Species Ca_c_c1 @c1:s9(Ca_c~Ca_c)@c1 #Ca_c
	Species Ca_B_c1 @c1:Ca_B(CaM_Ca2~0,CaM_Ca4~0,Calmodulin~0,hsp90,s35)@c1 #Ca_B
	Species s5_default @default:s5()@default #s5
	Species IP3_c1 @c1:s8(IP3~IP3)@c1 #IP3
	Species s7_c1 @c1:s7()@c1 #s7
	Species s8_c1 @c1:s8(IP3~0)@c1 #s8
	Species s9_c1 @c1:s9(Ca_c~0)@c1 #s9
	Species s10_c1 @c1:s10()@c1 #s10
	Species s11_c1 @c1:s11()@c1 #s11
	Species TimeT_c1 @c1:TimeT()@c1 #TimeT
	Species s13_c1 @c1:s13()@c1 #s13
	Species PDK1_c1 @c1:PDK1(_cyto~0)@c1 #PDK1
	Species AKT_c1 @c1:AKT(p~0,p_~0,pip2)@c1 #AKT
	Species PI3P_c1 @c1:PIP2(PI3P~PI3P,akt)@c1 #PI3P
	Species PIP2_c1 @c1:PIP2(PI3P~0,akt)@c1 #PIP2
	Species p_PI3K_c1 @c1:PI3K(p_~P_)@c1 #p-PI3K
	Species s3_c1 @c1:s3()@c1 #s3
	Species PI3K_c1 @c1:PI3K(p_~0)@c1 #PI3K
	Species Time_c1 @c1:Time()@c1 #Time
	Species PDK1_cyto_c1 @c1:PDK1(_cyto~_CYTO)@c1 #PDK1_cyto
	Species p_AKT_PI3P_c1 @c1:AKT(p~0,p_~P_,pip2!806)@c1.PIP2(PI3P~PI3P,akt!806)@c1 #p-AKT:PI3P
	Species pp_AKT_PI3P_c1 @c1:AKT(p~P,p_~P_,pip2!806)@c1.PIP2(PI3P~PI3P,akt!806)@c1 #pp-AKT:PI3P
	Species AKT_PI3P_c1 @c1:AKT(p~0,p_~0,pip2!806)@c1.PIP2(PI3P~PI3P,akt!806)@c1 #AKT:PI3P
	Species s35_c1 @c1:s35(_s115~0,ca_b,eNOS~0)@c1 #s35
	Species s37_c1 @c1:s37()@c1 #s37
	Species pre_time_c1 @c1:pre_time()@c1 #pre_time
	Species Time_s39_c1 @c1:Time_s39()@c1 #Time
	Species AP_1_c3 @c3:AP_1(a~0)@c3 #AP-1
	Species pp_JNKK_c1 @c1:JNKK(p~P,p_~P_)@c1 #pp-JNKK
	Species pp_JNK_c1 @c1:JNK(p~P,p_~P_)@c1 #pp-JNK
	Species eNOS_CaM_Ca4_c1 @c1:eNOS_CaM_Ca4()@c1 #eNOS-CaM-Ca4
	Species CaM_Ca4_c1 @c1:Ca_B(CaM_Ca2~0,CaM_Ca4~CaM_Ca4,Calmodulin~0,hsp90,s35)@c1 #CaM-Ca4
	Species CaM_Ca2_c1 @c1:Ca_B(CaM_Ca2~CaM_Ca2,CaM_Ca4~0,Calmodulin~0,hsp90,s35)@c1 #CaM-Ca2
	Species KLF2_c1 @c1:KLF2()@c1 #KLF2
	Species eNOS_CaM_Ca2_c1 @c1:Ca_B(CaM_Ca2~CaM_Ca2,CaM_Ca4~0,Calmodulin~0,hsp90,s35!811)@c1.s35(_s115~0,ca_b!811,eNOS~eNOS)@c1 #eNOS-CaM-Ca2
	Species eNOS_Cav_1_c1 @c1:eNOS_Cav_1(sa49_degraded~0)@c1 #eNOS-Cav-1
	Species Calmodulin_c1 @c1:Ca_B(CaM_Ca2~0,CaM_Ca4~0,Calmodulin~Calmodulin,hsp90,s35)@c1 #Calmodulin
	Species Hsp90_c1 @c1:Hsp90(ca_b,s118)@c1 #Hsp90
	Species Hsp90_eNOS_CaM_Ca4_c1 @c1:Ca_B(CaM_Ca2~0,CaM_Ca4~CaM_Ca4,Calmodulin~0,hsp90!812,s35!811)@c1.s35(_s115~0,ca_b!811,eNOS~eNOS)@c1.Hsp90(ca_b!812,s118)@c1 #Hsp90-eNOS-CaM-Ca4
	Species Hsp90_p_eNOS_CaM_Ca4_c1 @c1:Ca_B(CaM_Ca2~0,CaM_Ca4~CaM_Ca4,Calmodulin~0,hsp90!812,s35)@c1.Hsp90(ca_b!812,s118)@c1 #Hsp90-p-eNOS-CaM-Ca4
	Species Hsp90_eNOS_CaM_Ca2_c1 @c1:Hsp90_eNOS_CaM_Ca2()@c1 #Hsp90-eNOS-CaM-Ca2
	Species Hsp90_p_eNOS_CaM_Ca2_c1 @c1:Hsp90_p_eNOS_CaM_Ca2()@c1 #Hsp90-p-eNOS-CaM-Ca2
	Species L_Arg_c1 @c1:L_Arg()@c1 #L-Arg
	Species NO_c1 @c1:NO()@c1 #NO
	Species Hsp90_p_eNOS_c1 @c1:Hsp90(ca_b,s118!809)@c1.s118(hsp90!809)@c1 #Hsp90-p-eNOS
	Species Hsp90_eNOS_c1 @c1:Hsp90_eNOS()@c1 #Hsp90-eNOS
	Species Shc_c1 @c1:Shc(fak,grb2_sos,p_~0)@c1 #Shc
	Species p_Src_c1 @c1:Src(p_~P_)@c1 #p-Src
	Species p_FAK_c1 @c1:FAK(p_~P_,shc)@c1 #p-FAK
	Species Src_c1 @c1:Src(p_~0)@c1 #Src
	Species FAK_c1 @c1:FAK(p_~0,shc)@c1 #FAK
	Species JNKK_c1 @c1:JNKK(p~0,p_~0)@c1 #JNKK
	Species MEKK1_c1 @c1:MEKK1(p_~0)@c1 #MEKK1
	Species p_Shc_c1 @c1:Shc(fak,grb2_sos,p_~P_)@c1 #p-Shc
	Species JNK_c1 @c1:JNK(p~0,p_~0)@c1 #JNK
	Species p_JNKK_c1 @c1:JNKK(p~0,p_~P_)@c1 #p-JNKK
	Species p_MEKK1_c1 @c1:MEKK1(p_~P_)@c1 #p-MEKK1
	Species Ras_GTP_c1 @c1:Ras_GDP(Ras_GTP~Ras_GTP)@c1 #Ras:GTP
	Species Ras_GDP_c1 @c1:Ras_GDP(Ras_GTP~0)@c1 #Ras:GDP
	Species p_JNK_c1 @c1:JNK(p~0,p_~P_)@c1 #p-JNK
	Species KLF2_s105_c1 @c1:KLF2_s105()@c1 #KLF2
	Species eNOS_c1 @c1:s35(_s115~0,ca_b,eNOS~eNOS)@c1 #eNOS
	Species aAP_1_c3 @c3:AP_1(a~A)@c3 #aAP-1
	Species eNOS_s108_c3 @c3:eNOS_s108()@c3 #eNOS
	Species p_FAK_Shc_c1 @c1:Shc(fak!807,grb2_sos,p_~0)@c1.FAK(p_~P_,shc!807)@c1 #p-FAK:Shc
	Species Grb2_Sos_c1 @c1:Grb2_Sos(shc)@c1 #Grb2:Sos
	Species p_FAK_p_Shc_c1 @c1:Shc(fak!807,grb2_sos,p_~P_)@c1.FAK(p_~P_,shc!807)@c1 #p-FAK:p-Shc
	Species p_FAK_p_Shc_Grb2_Sos_c1 @c1:Shc(fak!807,grb2_sos!808,p_~P_)@c1.FAK(p_~P_,shc!807)@c1.Grb2_Sos(shc!808)@c1 #p-FAK:p-Shc:Grb2:Sos
	Species p_Shc_Grb2_Sos_c1 @c1:Shc(fak,grb2_sos!808,p_~P_)@c1.Grb2_Sos(shc!808)@c1 #p-Shc:Grb2:Sos
	Species eNOS_s115_c3 @c3:s35(_s115~_S115,ca_b,eNOS~eNOS)@c3 #eNOS
	Species sa49_degraded_c1 @c1:eNOS_Cav_1(sa49_degraded~sa49_degraded)@c1 #sa49_degraded
	Species s117_c1 @c1:s117()@c1 #s117
	Species s118_c1 @c1:s118(hsp90)@c1 #s118
end observables
begin functions
	fRate0() = Ca_B_c1*k7 - Ca_c_c1*k6*(B_T - Ca_B_c1)
	fRate1() = k_CCE*(Ca_ex_default - Ca_s_c2)*(-Ca_s_c2 + Cao*fracK/(Cao + K3))
	fRate2() = 0.5*Ca_c_c1*k1*(-R_T*half*(exp(-TimeT_c1/tau_I) + exp(-TimeT_c1/tau_II) + (tau_I + tau_II)*(exp(-TimeT_c1/tau_I) - exp(-TimeT_c1/tau_II))/(tau_I - tau_II)) + R_T)/(Ca_c_c1 + K1)
	fRate3() = 0.5*k2
	fRate4() = -0.5*Ca_c_c1^2*k4/(Ca_c_c1 + K3)^2 + 0.5*Ca_c_c1*Ca_s_c2*IP3_c1^3*k3*k_CICR/((Ca_c_c1 + K_CICR)*(IP3_c1 + K2)^3) + 0.5*Ca_s_c2^2*k5
	fRate5() = 0.5*Ca_c_c1^3*dot_Vhi/(Ca_c_c1^4 + K_hi^4)
	fRate6() = 0.5*dot_Vex/(Ca_c_c1 + K5)
	fRate7() = 0.5*dot_q_inpass
	fRate8() = 0.5
	fRate9() = 0.5*Ca_c_c1*dot_Vp/(Ca_c_c1^2 + K4^2)
	fRate12() = Ca_c_c1*k11
	fRate13() = Ca_c_c1*k13
	fRate14() = gam*k14
	fRate14m() = Ca_c_c1*k13
	fRate16() = gam*k14
	fRate16m() = Ca_c_c1*k13
	fRate18() = gam*k14
	fRate18m() = Ca_c_c1*k13
	fRate19() = kp*pp_AKT_PI3P_c1/(Hsp90_eNOS_CaM_Ca4_c1 + Kmp)
	fRate19m() = Vdp/(Hsp90_p_eNOS_CaM_Ca4_c1 + Kmdp)
	fRate20() = kp*pp_AKT_PI3P_c1/(Hsp90_eNOS_CaM_Ca2_c1 + Kmp)
	fRate20m() = Vdp/(Hsp90_p_eNOS_CaM_Ca2_c1 + Kmdp)
	fRate21() = 0.907*Time_c1^0.8*(1.0 - 0.00763898634483324*Time_c1^1.8)*exp(1.0 - 0.00763898634483324*Time_c1^1.8)
	fRate22() = 0.2*p_PI3K_c1/(PIP2_c1 + 6170.0)
	fRate23() = 7.5*PTEN_c1/(PI3P_c1 + 80.9)
	fRate25() = 20.0*PDK1_c1/(AKT_PI3P_c1 + 80000.0)
	fRate26() = 20.0*PDK2_c1/(p_AKT_PI3P_c1 + 80000.0)
	fRate27() = 0.037*PP2A_c1/(p_AKT_PI3P_c1 + 8800.0)
	fRate28() = 0.04*PP2A_c1/(pp_AKT_PI3P_c1 + 48000.0)
	fRate29() = 0.163*PP2A_c1/(pp_AKT_PI3P_c1 + 48000.0)
	fRate30() = 0.0007*PI3P_c1
	fRate32() = 1.0
	fRate33() = 17.0*Hsp90_eNOS_CaM_Ca4_c1 + 5.0*Hsp90_p_eNOS_CaM_Ca2_c1 + 17.0*Hsp90_p_eNOS_CaM_Ca4_c1 + 5.0*Hsp90_p_eNOS_c1 + 17.0*eNOS_CaM_Ca4_c1
	fRate34() = Vdp/(Hsp90_p_eNOS_c1 + Kmdp)
	fRate37() = 4.0*(1.0 - 0.238587157113837*Time_s39_c1^0.35)*(1.0*Time_s39_c1 + 1.0e-6)^(-0.65)*exp(1.0 - 0.238587157113837*Time_s39_c1^0.35)
	fRate38() = 0.026*Time_s39_c1^0.3*(1.0 - 0.000280471096406246*Time_s39_c1^1.3)*exp(1.0 - 0.000280471096406246*Time_s39_c1^1.3)
	fRate40() = 8.33*p_Src_c1
	fRate43() = 154.0/(p_Shc_c1 + 340.0)
	fRate46() = 9.0e-6*KLF2_c1 + 0.00012*aAP_1_c3
	fRate47() = 0.222*p_Shc_Grb2_Sos_c1/(Ras_GDP_c1 + 0.181)
	fRate48() = 0.289/(Ras_GTP_c1 + 0.0571)
	fRate49() = 0.035*Ras_GTP_c1/(MEKK1_c1 + 10.0)
	fRate50() = 0.125/(p_MEKK1_c1 + 8.0)
	fRate51() = 0.005*p_MEKK1_c1/(JNKK_c1 + 15.0)
	fRate52() = 0.375/(p_JNKK_c1 + 15.0)
	fRate53() = 0.002*pp_JNKK_c1/(JNK_c1 + 30.0)
	fRate54() = 0.05/(p_JNK_c1 + 15.0)
	fRate56() = 0.02824*eNOS_c1/(eNOS_c1 + 16.0)
	fRate57() = 1.0
	fRate58() = 0.375/(pp_JNKK_c1 + 15.0)
	fRate59() = 0.005*p_MEKK1_c1/(p_JNKK_c1 + 15.0)
	fRate60() = 0.05/(pp_JNK_c1 + 15.0)
	fRate61() = 0.002*pp_JNKK_c1/(p_JNK_c1 + 30.0)
	fRate62() = 4.0e-5*pp_JNK_c1/(AP_1_c3 + 25.0)
	fRate63() = 0.002/(aAP_1_c3 + 5.0)
	fRate64() = 29.256*exp(2.75 - 0.000152777777777778*Time_s39_c1)/(7200.0*exp(2.75 - 0.000152777777777778*Time_s39_c1) + 3600.0*exp(5.5 - 0.000305555555555556*Time_s39_c1) + 3600.0)
end functions
begin reaction rules
	re3_reactants_0: 0  -> Ca_B(CaM_Ca2~0,CaM_Ca4~0,Calmodulin~0,hsp90,s35)@c1 -1*(fRate0()) #Modifiers(s3, s4)
	re3_products_0: 0  -> s9(Ca_c~Ca_c)@c1 fRate0() #Modifiers(s3, s4)
	re4_reactants_0: 0  -> s5()@default -1*(fRate1()) #Modifiers(s1, s2, s1)
	re4_products_0: 0  -> Ca_s()@c2 fRate1() #Modifiers(s1, s2, s1)
	re5_reactants_0: 0  -> s7()@c1 -1*(fRate2()) #Modifiers(s3, s12, s119, s12, s3)
	re5_products_0: 0  -> s8(IP3~IP3)@c1 fRate2() #Modifiers(s3, s12, s119, s12, s3)
	re6: s8(IP3~IP3)@c1 -> s8(IP3~0)@c1 fRate3() #Modifiers(s6)
	re7_reactants_0: 0  -> Ca_s()@c2 -1*(fRate4()) #Modifiers(s6, s3, s6, s2)
	re7_products_0: 0  -> s9(Ca_c~Ca_c)@c1 fRate4() #Modifiers(s6, s3, s6, s2)
	re8: s9(Ca_c~Ca_c)@c1 -> s9(Ca_c~0)@c1 fRate5() #Modifiers(s3)
	re9: s9(Ca_c~Ca_c)@c1 -> s10()@c1 fRate6() #Modifiers(s3)
	re10_reactants_0: 0  -> s11()@c1 -1*(fRate7())
	re10_products_0: 0  -> s9(Ca_c~Ca_c)@c1 fRate7()
	re11_reactants_0: 0  -> s13()@c1 -1*(fRate8())
	re11_products_0: 0  -> TimeT()@c1 fRate8()
	re12: s9(Ca_c~Ca_c)@c1 -> s9(Ca_c~0)@c1 fRate9() #Modifiers(s3)
	re37: eNOS_Cav_1(sa49_degraded~0)@c1 + Ca_B(CaM_Ca2~0,CaM_Ca4~CaM_Ca4,Calmodulin~0,hsp90,s35)@c1 -> eNOS_CaM_Ca4()@c1 k15 #Modifiers(s47, s51)
	re38: Ca_B(CaM_Ca2~CaM_Ca2,CaM_Ca4~0,Calmodulin~0,hsp90,s35)@c1 + eNOS_Cav_1(sa49_degraded~0)@c1 <-> Ca_B(CaM_Ca2~CaM_Ca2,CaM_Ca4~0,Calmodulin~0,hsp90,s35!811)@c1.s35(_s115~0,ca_b!811,eNOS~eNOS)@c1 k17,k18 #Modifiers(s51, s48, s50)
	re41: Ca_B(CaM_Ca2~0,CaM_Ca4~0,Calmodulin~Calmodulin,hsp90,s35)@c1 <-> Ca_B(CaM_Ca2~CaM_Ca2,CaM_Ca4~0,Calmodulin~0,hsp90,s35)@c1 fRate12(),k12 #Modifiers(s3, s3, s52, s48)
	re42: Ca_B(CaM_Ca2~CaM_Ca2,CaM_Ca4~0,Calmodulin~0,hsp90,s35)@c1 <-> Ca_B(CaM_Ca2~0,CaM_Ca4~CaM_Ca4,Calmodulin~0,hsp90,s35)@c1 fRate13(),k14 #Modifiers(s3, s3, s48, s47)
	re50: eNOS_CaM_Ca4()@c1 <-> Ca_B(CaM_Ca2~CaM_Ca2,CaM_Ca4~0,Calmodulin~0,hsp90,s35!811)@c1.s35(_s115~0,ca_b!811,eNOS~eNOS)@c1 fRate14(),fRate14m() #Modifiers(s3, s45, s3, s50)
	re51: eNOS_CaM_Ca4()@c1 + Hsp90(ca_b,s118)@c1 -> Ca_B(CaM_Ca2~0,CaM_Ca4~CaM_Ca4,Calmodulin~0,hsp90!812,s35!811)@c1.s35(_s115~0,ca_b!811,eNOS~eNOS)@c1.Hsp90(ca_b!812,s118)@c1 k90 #Modifiers(s45, s57)
	re52: Ca_B(CaM_Ca2~0,CaM_Ca4~CaM_Ca4,Calmodulin~0,hsp90!812,s35!811)@c1.s35(_s115~0,ca_b!811,eNOS~eNOS)@c1.Hsp90(ca_b!812,s118)@c1 <-> Hsp90_eNOS_CaM_Ca2()@c1 fRate16(),fRate16m() #Modifiers(s3, s58, s3, s61)
	re53: Hsp90_eNOS_CaM_Ca2()@c1 -> Ca_B(CaM_Ca2~CaM_Ca2,CaM_Ca4~0,Calmodulin~0,hsp90,s35!811)@c1.s35(_s115~0,ca_b!811,eNOS~eNOS)@c1 + Hsp90(ca_b,s118)@c1 kr90 #Modifiers(s61)
	re54: Ca_B(CaM_Ca2~0,CaM_Ca4~CaM_Ca4,Calmodulin~0,hsp90!812,s35)@c1.Hsp90(ca_b!812,s118)@c1 <-> Hsp90_p_eNOS_CaM_Ca2()@c1 fRate18(),fRate18m() #Modifiers(s3, s60, s3, s62)
	re55: Ca_B(CaM_Ca2~0,CaM_Ca4~CaM_Ca4,Calmodulin~0,hsp90!812,s35!811)@c1.s35(_s115~0,ca_b!811,eNOS~eNOS)@c1.Hsp90(ca_b!812,s118)@c1 <-> Ca_B(CaM_Ca2~0,CaM_Ca4~CaM_Ca4,Calmodulin~0,hsp90!812,s35)@c1.Hsp90(ca_b!812,s118)@c1 fRate19(),fRate19m() #Modifiers(s27, s58, s27, s60)
	re56: Hsp90_eNOS_CaM_Ca2()@c1 <-> Hsp90_p_eNOS_CaM_Ca2()@c1 fRate20(),fRate20m() #Modifiers(s27, s61, s27, s62)
	re57_reactants_0: 0  -> PI3K(p_~0)@c1 -1*(fRate21()) #Modifiers(s23, s119, s23)
	re57_products_0: 0  -> PI3K(p_~P_)@c1 fRate21() #Modifiers(s23, s119, s23)
	re58: PIP2(PI3P~0,akt)@c1 -> PIP2(PI3P~PI3P,akt)@c1 fRate22() #Modifiers(s20, s19, s20)
	re59: PIP2(PI3P~PI3P,akt)@c1 -> PIP2(PI3P~0,akt)@c1 fRate23() #Modifiers(s18, s17, s18)
	re60: PIP2(PI3P~PI3P,akt)@c1 + AKT(p~0,p_~0,pip2)@c1 <-> AKT(p~0,p_~0,pip2!806)@c1.PIP2(PI3P~PI3P,akt!806)@c1 r25_k60,r25_kr60 #Modifiers(s17, s16, s28)
	re61: AKT(p~0,p_~0,pip2!806)@c1.PIP2(PI3P~PI3P,akt!806)@c1 -> AKT(p~0,p_~P_,pip2!806)@c1.PIP2(PI3P~PI3P,akt!806)@c1 fRate25() #Modifiers(s14, s28, s14)
	re62: AKT(p~0,p_~P_,pip2!806)@c1.PIP2(PI3P~PI3P,akt!806)@c1 -> AKT(p~P,p_~P_,pip2!806)@c1.PIP2(PI3P~PI3P,akt!806)@c1 fRate26() #Modifiers(s24, s26, s24)
	re63: AKT(p~0,p_~P_,pip2!806)@c1.PIP2(PI3P~PI3P,akt!806)@c1 -> AKT(p~0,p_~0,pip2!806)@c1.PIP2(PI3P~PI3P,akt!806)@c1 fRate27() #Modifiers(s15, s26, s15)
	re64: AKT(p~P,p_~P_,pip2!806)@c1.PIP2(PI3P~PI3P,akt!806)@c1 -> AKT(p~0,p_~P_,pip2!806)@c1.PIP2(PI3P~PI3P,akt!806)@c1 fRate28() #Modifiers(s15, s27, s15)
	re65: AKT(p~P,p_~P_,pip2!806)@c1.PIP2(PI3P~PI3P,akt!806)@c1 -> PIP2(PI3P~PI3P,akt)@c1 + AKT(p~0,p_~0,pip2)@c1 fRate29() #Modifiers(s15, s27, s15)
	re66: PDK1(_cyto~_CYTO)@c1 -> PDK1(_cyto~0)@c1 fRate30() #Modifiers(s17, s17, s25)
	re67: PDK1(_cyto~0)@c1 -> PDK1(_cyto~_CYTO)@c1 r32_k67 #Modifiers(s14)
	re68_reactants_0: 0  -> s3()@c1 -1*(fRate32())
	re68_products_0: 0  -> Time()@c1 fRate32()
	re69_reactants_0: 0  -> L_Arg()@c1 -1*(fRate33()) #Modifiers(s45, s50, s61, s62, s58, s60, s65, s45, s58, s62, s65, s60)
	re69_products_0: 0  -> NO()@c1 fRate33() #Modifiers(s45, s50, s61, s62, s58, s60, s65, s45, s58, s62, s65, s60)
	re70: Hsp90(ca_b,s118!809)@c1.s118(hsp90!809)@c1 -> Hsp90_eNOS()@c1 fRate34() #Modifiers(s65)
	re71: Hsp90_eNOS()@c1 -> eNOS_Cav_1(sa49_degraded~0)@c1 + Hsp90(ca_b,s118)@c1 kr90 #Modifiers(s66)
	re72: Hsp90_p_eNOS_CaM_Ca2()@c1 <-> Hsp90(ca_b,s118!809)@c1.s118(hsp90!809)@c1 + Ca_B(CaM_Ca2~CaM_Ca2,CaM_Ca4~0,Calmodulin~0,hsp90,s35)@c1 k18,k17 #Modifiers(s62, s65, s48)
	re102_reactants_0: 0  -> FAK(p_~0,shc)@c1 -1*(fRate37()) #Modifiers(s39, s119, s39)
	re102_products_0: 0  -> FAK(p_~P_,shc)@c1 fRate37() #Modifiers(s39, s119, s39)
	re103_reactants_0: 0  -> Src(p_~0)@c1 -1*(fRate38()) #Modifiers(s39, s119, s39)
	re103_products_0: 0  -> Src(p_~P_)@c1 fRate38() #Modifiers(s39, s119, s39)
	re104: Shc(fak,grb2_sos,p_~0)@c1 + FAK(p_~P_,shc)@c1 <-> Shc(fak!807,grb2_sos,p_~0)@c1.FAK(p_~P_,shc!807)@c1 r40_k105,r40_k_105 #Modifiers(s91, s93, s110)
	re105: Shc(fak!807,grb2_sos,p_~0)@c1.FAK(p_~P_,shc!807)@c1 <-> Shc(fak!807,grb2_sos,p_~P_)@c1.FAK(p_~P_,shc!807)@c1 fRate40(),r41_k_6 #Modifiers(s92, s110, s92, s112)
	re106: Shc(fak!807,grb2_sos,p_~P_)@c1.FAK(p_~P_,shc!807)@c1 + Grb2_Sos(shc)@c1 <-> Shc(fak!807,grb2_sos!808,p_~P_)@c1.FAK(p_~P_,shc!807)@c1.Grb2_Sos(shc!808)@c1 r42_k107,r42_k_107 #Modifiers(s111, s112, s113)
	re107: Shc(fak!807,grb2_sos!808,p_~P_)@c1.FAK(p_~P_,shc!807)@c1.Grb2_Sos(shc!808)@c1 <-> Shc(fak,grb2_sos!808,p_~P_)@c1.Grb2_Sos(shc!808)@c1 + FAK(p_~P_,shc)@c1 r43_k108,r43_k_108 #Modifiers(s113, s93, s114)
	re108: Shc(fak,grb2_sos,p_~P_)@c1 -> Shc(fak,grb2_sos,p_~0)@c1 fRate43() #Modifiers(s98)
	re109: Shc(fak,grb2_sos!808,p_~P_)@c1.Grb2_Sos(shc!808)@c1 -> Shc(fak,grb2_sos,p_~P_)@c1 + Grb2_Sos(shc)@c1 r45_k9 #Modifiers(s114)
	re110: s35(_s115~_S115,ca_b,eNOS~eNOS)@c3 -> s35(_s115~0,ca_b,eNOS~eNOS)@c1 r46_kT #Modifiers(s115)
	re111_reactants_0: 0  -> eNOS_s108()@c3 -1*(fRate46()) #Modifiers(s107, s49, s107, s49)
	re111_products_0: 0  -> s35(_s115~_S115,ca_b,eNOS~eNOS)@c3 fRate46() #Modifiers(s107, s49, s107, s49)
	re112: Ras_GDP(Ras_GTP~0)@c1 -> Ras_GDP(Ras_GTP~Ras_GTP)@c1 fRate47() #Modifiers(s114, s114, s103)
	re113: Ras_GDP(Ras_GTP~Ras_GTP)@c1 -> Ras_GDP(Ras_GTP~0)@c1 fRate48() #Modifiers(s102)
	re114: MEKK1(p_~0)@c1 -> MEKK1(p_~P_)@c1 fRate49() #Modifiers(s102, s102, s97)
	re115: MEKK1(p_~P_)@c1 -> MEKK1(p_~0)@c1 fRate50() #Modifiers(s101)
	re116: JNKK(p~0,p_~0)@c1 -> JNKK(p~0,p_~P_)@c1 fRate51() #Modifiers(s101, s101, s96)
	re117: JNKK(p~0,p_~P_)@c1 -> JNKK(p~0,p_~0)@c1 fRate52() #Modifiers(s100)
	re118: JNK(p~0,p_~0)@c1 -> JNK(p~0,p_~P_)@c1 fRate53() #Modifiers(s43, s99, s43)
	re119: JNK(p~0,p_~P_)@c1 -> JNK(p~0,p_~0)@c1 fRate54() #Modifiers(s104)
	re120: s35(_s115~0,ca_b,eNOS~eNOS)@c1 -> s35(_s115~0,ca_b,eNOS~0)@c1 r56_kD #Modifiers(s106)
	re121_reactants_0: 0  -> s37()@c1 -1*(fRate56()) #Modifiers(s106, s106)
	re121_products_0: 0  -> eNOS_Cav_1(sa49_degraded~0)@c1 fRate56() #Modifiers(s106, s106)
	re122_reactants_0: 0  -> pre_time()@c1 -1*(fRate57())
	re122_products_0: 0  -> Time_s39()@c1 fRate57()
	re123: JNKK(p~P,p_~P_)@c1 -> JNKK(p~0,p_~P_)@c1 fRate58() #Modifiers(s43)
	re124: JNKK(p~0,p_~P_)@c1 -> JNKK(p~P,p_~P_)@c1 fRate59() #Modifiers(s101, s100, s101)
	re125: JNK(p~P,p_~P_)@c1 -> JNK(p~0,p_~P_)@c1 fRate60() #Modifiers(s44)
	re126: JNK(p~0,p_~P_)@c1 -> JNK(p~P,p_~P_)@c1 fRate61() #Modifiers(s43, s104, s43)
	re127: AP_1(a~0)@c3 -> AP_1(a~A)@c3 fRate62() #Modifiers(s44, s44, s42)
	re128: AP_1(a~A)@c3 -> AP_1(a~0)@c3 fRate63() #Modifiers(s107)
	re129_reactants_0: 0  -> KLF2_s105()@c1 -1*(fRate64()) #Modifiers(s39, s39)
	re129_products_0: 0  -> KLF2()@c1 fRate64() #Modifiers(s39, s39)
	re131: eNOS_Cav_1(sa49_degraded~0)@c1 -> eNOS_Cav_1(sa49_degraded~sa49_degraded)@c1 kDD #Modifiers(s51)
	re132: eNOS_CaM_Ca4()@c1 -> s117()@c1 + Ca_B(CaM_Ca2~0,CaM_Ca4~CaM_Ca4,Calmodulin~0,hsp90,s35)@c1 kDD #Modifiers(s45)
	re133: Ca_B(CaM_Ca2~CaM_Ca2,CaM_Ca4~0,Calmodulin~0,hsp90,s35!811)@c1.s35(_s115~0,ca_b!811,eNOS~eNOS)@c1 -> s117()@c1 + Ca_B(CaM_Ca2~CaM_Ca2,CaM_Ca4~0,Calmodulin~0,hsp90,s35)@c1 kDD #Modifiers(s50)
	re134: Hsp90_eNOS()@c1 -> Hsp90(ca_b,s118)@c1 + s118(hsp90)@c1 kDD #Modifiers(s66)
	re135: Hsp90(ca_b,s118!809)@c1.s118(hsp90!809)@c1 -> s118(hsp90)@c1 + Hsp90(ca_b,s118)@c1 kDD #Modifiers(s65)
	re136: Hsp90_eNOS_CaM_Ca2()@c1 -> Hsp90(ca_b,s118)@c1 + Ca_B(CaM_Ca2~CaM_Ca2,CaM_Ca4~0,Calmodulin~0,hsp90,s35)@c1 kDD #Modifiers(s61)
	re137: Hsp90_p_eNOS_CaM_Ca2()@c1 -> Hsp90(ca_b,s118)@c1 + Ca_B(CaM_Ca2~CaM_Ca2,CaM_Ca4~0,Calmodulin~0,hsp90,s35)@c1 kDD #Modifiers(s62)
	re138: Ca_B(CaM_Ca2~0,CaM_Ca4~CaM_Ca4,Calmodulin~0,hsp90!812,s35!811)@c1.s35(_s115~0,ca_b!811,eNOS~eNOS)@c1.Hsp90(ca_b!812,s118)@c1 -> Hsp90(ca_b,s118)@c1 + Ca_B(CaM_Ca2~0,CaM_Ca4~CaM_Ca4,Calmodulin~0,hsp90,s35)@c1 kDD #Modifiers(s58)
	re139: Ca_B(CaM_Ca2~0,CaM_Ca4~CaM_Ca4,Calmodulin~0,hsp90!812,s35)@c1.Hsp90(ca_b!812,s118)@c1 -> Hsp90(ca_b,s118)@c1 + Ca_B(CaM_Ca2~0,CaM_Ca4~CaM_Ca4,Calmodulin~0,hsp90,s35)@c1 kDD #Modifiers(s60)
end reaction rules
end model
