###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000490', 'http://identifiers.org/biomodels.db/MODEL1309160000']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/24026253']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/pubmed/22020181', 'http://identifiers.org/pubmed/23146124', 'http://identifiers.org/pubmed/21560018']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0006954', 'http://identifiers.org/go/GO:0097366']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046']
#@BQB_HAS_VERSION:['http://identifiers.org/doid/DOID:2841']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 33 molecules and 66 reactions. The translated model has 18 molecules and 74 rules'
###
begin model
begin parameters
	Ca 1.0
	Ca_FEV_ex 10000.0
	Cao_FEV 10000.0
	EC50_ML_FEV 500.0
	EC50_act 0.75
	EC50_migr 0.115
	Et_LTCs 1.0
	FLOa 1.5
	F_ml 0.660688
	F_zf 0.082
	GPx 1.6
	GSH_aw 1000.0
	GSH_b 5000.0
	GS_pool_aw 10000.0
	GS_pool_b 10000.0
	HEDH5 0.5
	J_AW_lymfl 0.00115
	J_BM_lymfl 0.00049
	K_AA 10.74959
	K_Ca2 14.36738
	K_Ca3 7116.527
	K_Ca_FEV 150000.0
	K_GSH 744.9176
	K_LTA 1.75951
	K_LTA_GSH 1696.6
	K_LTC 0.1951215
	K_PLA2_Ca 0.1
	Kd12 0.007
	Kd50 0.43
	KdZ 20.0
	Kd_Hn_FEV 6300000.0
	Kd_IL_migr 50.0
	Kd_LT 1000.0
	Kd_LTE_migr 50000.0
	Kd_LTR1_FEV 1000.0
	Kd_LTR2_FEV 10000.0
	Kd_LT_2 10000.0
	Kd_gpx_GSSG 0.07154222
	Kd_gpx_HETE5 6.043446
	Kd_hedh_HETE5 0.331696
	Kd_hedh_NADP 2.895899
	Kd_hedh_NADPH 2.685581
	Kd_hedh_oxoETE5 1.667019
	Ke_ox 99.99979
	Ke_red 5.761955e-07
	Ki_AA 551.8748
	Ki_HETE 0.5408177
	Ki_ML_EOa 500.0
	Km_1 2.0
	Km_CoA_AA 0.005
	Km_PLA2_APC 20.0
	Km_gpx_GSH 600.0
	Km_gpx_HPETE5 5.974381
	Kp_Hn_AW 3950.0
	Kp_LTC_AW 0.22
	Kp_LTD_AW 0.22
	Kp_LTE_AW 0.22
	Kp_ZF_AW 0.204
	Kp_ZF_IW 0.631
	LOOH_aw 20.0
	LOOH_b 1.0
	MAX_FEV 4.94
	M_Hn 111.2
	M_IL5 45000.0
	M_LTC 625.8
	M_LTD 496.7
	M_LTE 439.6
	M_ML 586.18
	M_ZF 236.0
	NADP_aw 2900.0
	NADP_b 2000.0
	NP_pool_aw 3000.0
	NP_pool_b 3000.0
	N_A_pmole 602000000000.0
	PL 110.0
	Q_AW_blf 5.23
	R1_portion_EOa 0.39
	R1_portion_FEV 0.016
	R2_portion_FEV 0.037
	R_FEV 3.007
	R_Hn_AW 5130.0
	R_Hn_B 141.0
	R_LTC_AW 1.4
	R_LTC_B 0.538
	R_LTD_AW 1.4
	R_LTD_B 0.538
	R_LTE_AW 1.4
	R_LTE_B 0.538
	R_ZF_AW 2.96
	R_ZF_B 0.533
	R_in_relax_FEV 2.073
	T 1440.0
	TSN_0 15.5
	V_CoA 350.0
	Vmax_PLA2 450.0
	a 1.0
	al 1.0
	ca 10.0
	diam_EO 0.00012
	fup_Hn 0.77
	fup_LT 0.16
	fup_ML 0.004
	fup_ZF 0.069
	h_act 3.0
	h_matur 1.0
	h_migr 3.0
	k1 1e-06
	k1_min 1.6e-07
	k3 34.0
	k_3 263640.0
	k_EO_a_d 0.00015
	k_EO_d 0.0003
	k_EO_m 10.0
	k_EO_t_baw 0.04
	k_EO_t_bmb 0.02
	k_Hn_d 0.033
	k_Hn_p 18000000000.0
	k_IL_d 0.0046
	k_IL_p 16.0
	k_IL_t_awb 0.05
	k_IL_t_bbm 0.001
	k_LTCs_back 1003.709
	k_LTCs_fow 1068016.0
	k_abs_ml 0.012
	k_abs_zf 0.018
	k_acet 0.002703885
	k_dp 0.067
	k_elim_ml 0.00225
	k_elim_zf 0.004
	k_fev_eff 3000000.0
	k_ggt 0.1
	k_gpx_cat 0.4884995
	k_hedh_1 88.33768
	k_hedh_2 1724.404
	k_hedh_3 31.49749
	k_hedh_4 8.077531
	k_lo 4642.68
	k_lta_syn 54420.0
	k_ltc_ltd_el 0.1
	k_lte_el 0.04
	k_ox 0.0002658
	k_ox2 67.2
	k_red 0.0002538
	k_red2 4.428e-05
	ka 500.0
	ki 25000.0
	kia 0.001
	n_FEV 1.0
	npi 3.14
	oral 1.0
	portion_migr 0.3
	DOSE_ml 0
	DOSE_zf 0
	LOH_aw 0
	LOH_b 0
	ML_airways 0
	ML_ex 0
	OL_b_ex 0
	naEO_LTCsyn 0
	oxoETE_aw 0
	oxoETE_b 0
	zf_inh 0
end parameters
begin compartments
	#volume units: L
	Default 3 1.0
	Vd_LTC 3 9.47999954223633
	Vd_LTD 3 9.47999954223633
	Vd_LTE 3 9.47999954223633
	V_B 3 2.80999994277954
	V_AW 3 0.209999993443489
	Vd_Hn 3 78100.0
	Vd_IL5 3 10.1999998092651
	V_BM 3 0.824999988079071
	Vd_AW_LTC 3 1.53999996185303
	Vd_AW_LTD 3 1.53999996185303
	Vd_AW_LTE 3 1.53999996185303
	Vd_AW_Hn 3 5640.0
	Vd_ZF 3 9.44999980926514
	Vd_AW_ZF 3 3.25999999046326
	Vd_ML 3 10.0
end compartments
begin molecule types
	#^ bqbiol:isVersionOf chebi:CHEBI:10112
	#^ bqbiol:occursIn bto:BTO:0001660
	ZF_blood(ZF_airways~ZF_airways~0)
	LTA4(_aw~_AW~0,_b~_B~0)
	#^ bqbiol:isVersionOf chebi:CHEBI:10112
	#^ bqbiol:occursIn bto:BTO:0000648
	ZF_intes()
	LTD4(_aw~_AW~0,_b~_B~0)
	#^ bqbiol:isVersionOf chebi:CHEBI:15843
	#^ bqbiol:occursIn bto:BTO:0000131
	AA_b()
	EO_a()
	#^ bqbiol:isVersionOf chebi:CHEBI:18295
	#^ bqbiol:occursIn bto:BTO:0000131
	Hn_b(Hn_aw~Hn_aw~0)
	#^ bqbiol:occursIn bto:BTO:0000131
	#^ bqbiol:isVersionOf cl:CL:0000771
	EO_b(EO_aw~EO_aw~0,_a~_A~0,a_~A_~0,i_~I_~0,m~M~0)
	#^ bqbiol:isVersionOf uniprot:P05113
	#^ bqbiol:occursIn bto:BTO:0001660
	IL_aw()
	#^ bqbiol:isVersionOf uniprot:P05113
	#^ bqbiol:occursIn bto:BTO:0000131
	IL_b(m~M~0)
	#^ bqbiol:isVersionOf chebi:CHEBI:50730
	#^ bqbiol:occursIn bto:BTO:0000131
	ML_blood()
	EO_i()
	#^ bqbiol:isVersionOf chebi:CHEBI:15843
	#^ bqbiol:occursIn bto:BTO:0001660
	AA_aw()
	LTE4(_aw~_AW~0,_b~_B~0)
	#^ bqbiol:isVersionOf pubchem.compound:5280493
	LTC4_b_out(LTC4_aw_out~LTC4_aw_out~0)
	#^ bqbiol:isVersionOf chebi:CHEBI:50730
	#^ bqbiol:occursIn bto:BTO:0000648
	ML_intes()
	HETE(_aw~_AW~0,_b~_B~0,p~P~0)
	LTC4(_aw~_AW~0,_b~_B~0)
end molecule types
begin seed species
	@Default:AA_b()@Default 1.7409264768e+23 # 0.2890944mol/L * 6.022e23/mol *1.0L #AA_b #AA_b
	@Default:HETE(_aw~0,_b~_B,p~P)@Default 1.7860270414000002e+23 #original 0.2965837mol/L #HPETE_b #HPETE_b
	@Default:HETE(_aw~0,_b~_B,p~0)@Default 3.0337047465999996e+24 #original 5.037703mol/L #HETE_b #HETE_b
	@Default:LTA4(_aw~0,_b~_B)@Default 6.510787674e+23 #original 1.081167mol/L #LTA4_b #LTA4_b
	@Default:LTC4(_aw~0,_b~_B)@Default 5.3414375206000006e+23 #original 0.8869873mol/L #LTC4_b #LTC4_b
	@Vd_LTC:LTC4_b_out(LTC4_aw_out~0)@Vd_LTC 1.2380058966976263e+28 #original 2168.571mol/L #LTC4_b_out #LTC4_b_out
	@Vd_LTD:LTD4(_aw~0,_b~_B)@Vd_LTD 7.469969209023287e+27 #original 1308.488mol/L #LTD4_b #LTD4_b
	@Vd_LTE:LTE4(_aw~0,_b~_B)@Vd_LTE 1.1721062915293411e+28 #original 2053.137mol/L #LTE4_b #LTE4_b
	@V_B:EO_b(EO_aw~0,_a~0,a_~0,i_~0,m~0)@V_B 7.921340686176525e+17 #original 4.68114e-07mol/L #EO_b #EO_b
	@V_B:EO_b(EO_aw~0,_a~0,a_~0,i_~I_,m~0)@V_B 9.271762813229672e+16 #original 5.479176e-08mol/L #EO_i_b #EO_i_b
	@V_B:EO_b(EO_aw~0,_a~0,a_~A_,i_~0,m~0)@V_B 9.109328574175345e+20 #original 0.0005383185mol/L #EO_a_b #EO_a_b
	@V_AW:EO_b(EO_aw~EO_aw,_a~0,a_~0,i_~I_,m~0)@V_AW 1.7182366111141066e+16 #original 1.358698e-07mol/L #EO_i_aw #EO_i_aw
	@V_AW:EO_b(EO_aw~EO_aw,_a~_A,a_~0,i_~0,m~0)@V_AW 1.7182555804135145e+20 #original 0.001358713mol/L #EO_a_aw #EO_a_aw
	@V_AW:EO_b(EO_aw~EO_aw,_a~0,a_~0,i_~0,m~0)@V_AW 1.4878987315055965e+17 #original 1.176558e-06mol/L #EO_aw #EO_aw
	@Vd_Hn:Hn_b(Hn_aw~0)@Vd_Hn 7.052835289016e+32 #original 14995.88mol/L #Hn_b #Hn_b
	@Vd_IL5:IL_b(m~0)@Vd_IL5 3.682304874250739e+24 #original 0.5994857mol/L #IL_b #IL_b
	@V_BM:IL_b(m~M)@V_BM 1.998882461226926e+23 #original 0.4023394mol/L #IL_bm #IL_bm
	@V_BM:EO_b(EO_aw~0,_a~0,a_~0,i_~0,m~M)@V_BM 8.134803979105247e+17 #original 1.637391e-06mol/L #EO_bm #EO_bm
	@Default:AA_aw()@Default 7.858029514000001e+22 #original 0.1304887mol/L #AA_aw #AA_aw
	@Default:HETE(_aw~_AW,_b~0,p~P)@Default 1.0722797288e+24 #original 1.780604mol/L #HPETE_aw #HPETE_aw
	@Default:HETE(_aw~_AW,_b~0,p~0)@Default 1.1808696372000001e+24 #original 1.960926mol/L #HETE_aw #HETE_aw
	@Default:LTA4(_aw~_AW,_b~0)@Default 2.5107265654000004e+25 #original 41.69257mol/L #LTA4_aw #LTA4_aw
	@Default:LTC4(_aw~_AW,_b~0)@Default 4.0989869114e+24 #original 6.806687mol/L #LTC4_aw #LTC4_aw
	@Vd_AW_LTC:LTC4_b_out(LTC4_aw_out~LTC4_aw_out)@Vd_AW_LTC 3.338359305978302e+26 #original 359.9744mol/L #LTC4_aw_out #LTC4_aw_out
	@Vd_AW_LTD:LTD4(_aw~_AW,_b~0)@Vd_AW_LTD 1.90819535630855e+26 #original 205.7602mol/L #LTD4_aw #LTD4_aw
	@Vd_AW_LTE:LTE4(_aw~_AW,_b~0)@Vd_AW_LTE 2.9920930378915804e+26 #original 322.6366mol/L #LTE4_aw #LTE4_aw
	@Vd_AW_Hn:Hn_b(Hn_aw~Hn_aw)@Vd_AW_Hn 4.81004395572e+31 #original 14162.15mol/L #Hn_aw #Hn_aw
	@V_AW:IL_aw()@V_AW 8.381191646506777e+22 #original 0.6627439mol/L #IL_aw #IL_aw
end seed species
begin observables
	Species AA_b_Default @Default:AA_b()@Default #AA_b
	Species HPETE_b_Default @Default:HETE(_aw~0,_b~_B,p~P)@Default #HPETE_b
	Species HETE_b_Default @Default:HETE(_aw~0,_b~_B,p~0)@Default #HETE_b
	Species LTA4_b_Default @Default:LTA4(_aw~0,_b~_B)@Default #LTA4_b
	Species LTC4_b_Default @Default:LTC4(_aw~0,_b~_B)@Default #LTC4_b
	Species LTC4_b_out_Vd_LTC @Vd_LTC:LTC4_b_out(LTC4_aw_out~0)@Vd_LTC #LTC4_b_out
	Species LTD4_b_Vd_LTD @Vd_LTD:LTD4(_aw~0,_b~_B)@Vd_LTD #LTD4_b
	Species LTE4_b_Vd_LTE @Vd_LTE:LTE4(_aw~0,_b~_B)@Vd_LTE #LTE4_b
	Species EO_b_V_B @V_B:EO_b(EO_aw~0,_a~0,a_~0,i_~0,m~0)@V_B #EO_b
	Species EO_i_b_V_B @V_B:EO_b(EO_aw~0,_a~0,a_~0,i_~I_,m~0)@V_B #EO_i_b
	Species EO_a_b_V_B @V_B:EO_b(EO_aw~0,_a~0,a_~A_,i_~0,m~0)@V_B #EO_a_b
	Species EO_i_aw_V_AW @V_AW:EO_b(EO_aw~EO_aw,_a~0,a_~0,i_~I_,m~0)@V_AW #EO_i_aw
	Species EO_a_aw_V_AW @V_AW:EO_b(EO_aw~EO_aw,_a~_A,a_~0,i_~0,m~0)@V_AW #EO_a_aw
	Species EO_aw_V_AW @V_AW:EO_b(EO_aw~EO_aw,_a~0,a_~0,i_~0,m~0)@V_AW #EO_aw
	Species Hn_b_Vd_Hn @Vd_Hn:Hn_b(Hn_aw~0)@Vd_Hn #Hn_b
	Species IL_b_Vd_IL5 @Vd_IL5:IL_b(m~0)@Vd_IL5 #IL_b
	Species IL_bm_V_BM @V_BM:IL_b(m~M)@V_BM #IL_bm
	Species EO_bm_V_BM @V_BM:EO_b(EO_aw~0,_a~0,a_~0,i_~0,m~M)@V_BM #EO_bm
	Species AA_aw_Default @Default:AA_aw()@Default #AA_aw
	Species HPETE_aw_Default @Default:HETE(_aw~_AW,_b~0,p~P)@Default #HPETE_aw
	Species HETE_aw_Default @Default:HETE(_aw~_AW,_b~0,p~0)@Default #HETE_aw
	Species LTA4_aw_Default @Default:LTA4(_aw~_AW,_b~0)@Default #LTA4_aw
	Species LTC4_aw_Default @Default:LTC4(_aw~_AW,_b~0)@Default #LTC4_aw
	Species LTC4_aw_out_Vd_AW_LTC @Vd_AW_LTC:LTC4_b_out(LTC4_aw_out~LTC4_aw_out)@Vd_AW_LTC #LTC4_aw_out
	Species LTD4_aw_Vd_AW_LTD @Vd_AW_LTD:LTD4(_aw~_AW,_b~0)@Vd_AW_LTD #LTD4_aw
	Species LTE4_aw_Vd_AW_LTE @Vd_AW_LTE:LTE4(_aw~_AW,_b~0)@Vd_AW_LTE #LTE4_aw
	Species Hn_aw_Vd_AW_Hn @Vd_AW_Hn:Hn_b(Hn_aw~Hn_aw)@Vd_AW_Hn #Hn_aw
	Species IL_aw_V_AW @V_AW:IL_aw()@V_AW #IL_aw
	Species ZF_intes_Default @Default:ZF_intes()@Default #ZF_intes
	Species ZF_blood_Vd_ZF @Vd_ZF:ZF_blood(ZF_airways~0)@Vd_ZF #ZF_blood
	Species ZF_airways_Vd_AW_ZF @Vd_AW_ZF:ZF_blood(ZF_airways~ZF_airways)@Vd_AW_ZF #ZF_airways
	Species ML_intes_Default @Default:ML_intes()@Default #ML_intes
	Species ML_blood_Vd_ML @Vd_ML:ML_blood()@Vd_ML #ML_blood
end observables
begin functions
	ZF_airways_conc() = ZF_airways_Vd_AW_ZF
	OH_aw() = HETE_aw_Default + LOH_aw
	r2() = Ca*k_red2/K_Ca2 + k_red
	OOH_aw() = HPETE_aw_Default + LOOH_aw
	r1() = Ca*k_ox2/K_Ca2 + k_ox
	REDOX_aw() = (r2/Ke_red + OH_aw*r1/Ke_ox + ZF_airways_conc*al*ki*(Ca/K_Ca3 + 1.0)/KdZ)/(OOH_aw*r1 + r2)
	Ki_HPETE_AA() = Ki_AA
	RELFLO5_aw() = (AA_aw_Default*k_lo/K_AA + HPETE_aw_Default*k3*(AA_aw_Default/Ki_AA + 1.0))/(k_3*(AA_aw_Default/Ki_HPETE_AA + 1.0) + k_lta_syn)
	K_AA_HETE() = Ki_HETE
	Ki_AA_AA() = Ki_AA
	DFLOa_aw() = (Ca/K_Ca3 + 1.0)*(AA_aw_Default*(HETE_aw_Default/K_AA_HETE + 1.0)/Ki_AA + AA_aw_Default*(AA_aw_Default/Ki_AA_AA + 1.0)/K_AA + HETE_aw_Default/Ki_HETE + REDOX_aw*(Ca/K_Ca2 + 1.0)/(Ca/K_Ca3 + 1.0) + RELFLO5_aw*(AA_aw_Default/Ki_HPETE_AA + 1.0) + 1.0 + ZF_airways_conc*al/KdZ)
	ZF_blood_conc() = ZF_blood_Vd_ZF*fup_ZF
	OH_b() = HETE_b_Default + LOH_b
	OOH_b() = HPETE_b_Default + LOOH_b
	REDOX_b() = (r2/Ke_red + OH_b*r1/Ke_ox + ZF_blood_conc*al*ki*(Ca/K_Ca3 + 1.0)/KdZ)/(OOH_b*r1 + r2)
	RELFLO5_b() = (AA_b_Default*k_lo/K_AA + HPETE_b_Default*k3*(AA_b_Default/Ki_AA + 1.0))/(k_3*(AA_b_Default/Ki_HPETE_AA + 1.0) + k_lta_syn)
	DFLOa_b() = (Ca/K_Ca3 + 1.0)*(AA_b_Default*(HETE_b_Default/K_AA_HETE + 1.0)/Ki_AA + AA_b_Default*(AA_b_Default/Ki_AA_AA + 1.0)/K_AA + HETE_b_Default/Ki_HETE + REDOX_b*(Ca/K_Ca2 + 1.0)/(Ca/K_Ca3 + 1.0) + RELFLO5_b*(AA_b_Default/Ki_HPETE_AA + 1.0) + 1.0 + ZF_blood_conc*al/KdZ)
	ML_airways_conc() = ML_blood_Vd_ML*fup_ML
	Ca_FEV() = Cao_FEV + k_fev_eff*(Hn_aw_Vd_AW_Hn*(-R1_portion_FEV - R2_portion_FEV + 1.0)/(Kd_Hn_FEV*(Hn_aw_Vd_AW_Hn/Kd_Hn_FEV + 1.0)) + R2_portion_FEV*(LTC4_aw_out_Vd_AW_LTC + LTD4_aw_Vd_AW_LTD)/(Kd_LTR2_FEV*(1.0 + (LTC4_aw_out_Vd_AW_LTC + LTD4_aw_Vd_AW_LTD)/Kd_LTR2_FEV)) + LTD4_aw_Vd_AW_LTD*R1_portion_FEV/(Kd_LTR1_FEV*(1.0 + LTD4_aw_Vd_AW_LTD/Kd_LTR1_FEV + ML_airways_conc/EC50_ML_FEV)))
	Ca_FEV_LTR1() = LTD4_aw_Vd_AW_LTD*R1_portion_FEV*k_fev_eff/(Kd_LTR1_FEV*(Ca_FEV - Cao_FEV)*(1.0 + LTD4_aw_Vd_AW_LTD/Kd_LTR1_FEV + ML_airways_conc/EC50_ML_FEV))
	N_EO_a_b() = 602000000.0*EO_a_b_V_B
	N_EO_a_aw() = 602000000.0*EO_a_aw_V_AW
	N_EO_a() = 0.0695364231385137*N_EO_a_aw + 0.930463576861486*N_EO_a_b
	N_EO_b_tot() = 602000000.0*EO_a_b_V_B + 602000000.0*EO_b_V_B + 602000000.0*EO_i_b_V_B
	N_EO_aw_tot() = 602000000.0*EO_a_aw_V_AW + 602000000.0*EO_aw_V_AW + 602000000.0*EO_i_aw_V_AW
	N_EO() = 0.0695364231385137*N_EO_aw_tot + 0.930463576861486*N_EO_b_tot
	NADPH_aw() = -NADP_aw + NP_pool_aw
	C_hedh_aw() = (k_hedh_3*oxoETE_aw/Kd_hedh_oxoETE5 + NADP_aw*k_hedh_2/Kd_hedh_NADP)*(HETE_aw_Default/Kd_hedh_HETE5 + 1.0 + NADPH_aw/Kd_hedh_NADPH)
	A_hedh_aw() = C_hedh_aw + (HETE_aw_Default*k_hedh_1/Kd_hedh_HETE5 + NADPH_aw*k_hedh_4/Kd_hedh_NADPH)*(1.0 + oxoETE_aw/Kd_hedh_oxoETE5 + NADP_aw/Kd_hedh_NADP)
	C_aw() = GSH_aw^2*HPETE_aw_Default/(Km_gpx_GSH^2*Km_gpx_HPETE5)
	GSSG_aw() = -0.5*GSH_aw + 0.5*GS_pool_aw
	A_aw() = C_aw + GSH_aw^2*(GSSG_aw/Kd_gpx_GSSG + 1.0)/Km_gpx_GSH^2 + HPETE_aw_Default*(HETE_aw_Default/Kd_gpx_HETE5 + 1.0)/Km_gpx_HPETE5
	FLO3_aw() = FLOa/DFLOa_aw
	FLO3t_aw() = FLO3_aw*(Ca/K_Ca3 + 1.0)
	FLO5HP_aw() = FLO3t_aw*RELFLO5_aw
	FLO2_aw() = FLO3_aw*REDOX_aw
	NADPH_b() = -NADP_b + NP_pool_b
	C_hedh_b() = (k_hedh_3*oxoETE_b/Kd_hedh_oxoETE5 + NADP_b*k_hedh_2/Kd_hedh_NADP)*(HETE_b_Default/Kd_hedh_HETE5 + 1.0 + NADPH_b/Kd_hedh_NADPH)
	A_hedh_b() = C_hedh_b + (HETE_b_Default*k_hedh_1/Kd_hedh_HETE5 + NADPH_b*k_hedh_4/Kd_hedh_NADPH)*(1.0 + oxoETE_b/Kd_hedh_oxoETE5 + NADP_b/Kd_hedh_NADP)
	C_b() = GSH_b^2*HPETE_b_Default/(Km_gpx_GSH^2*Km_gpx_HPETE5)
	GSSG_b() = -0.5*GSH_b + 0.5*GS_pool_b
	A_b() = C_b + GSH_b^2*(GSSG_b/Kd_gpx_GSSG + 1.0)/Km_gpx_GSH^2 + HPETE_b_Default*(HETE_b_Default/Kd_gpx_HETE5 + 1.0)/Km_gpx_HPETE5
	FLO3_b() = FLOa/DFLOa_b
	FLO3t_b() = FLO3_b*(Ca/K_Ca3 + 1.0)
	FLO5HP_b() = FLO3t_b*RELFLO5_b
	FLO2_b() = FLO3_b*REDOX_b
	OL_ASM() = Hn_aw_Vd_AW_Hn*(-R1_portion_FEV - R2_portion_FEV + 1.0)/(Kd_Hn_FEV*(Hn_aw_Vd_AW_Hn/Kd_Hn_FEV + 1.0)) + R2_portion_FEV*(LTC4_aw_out_Vd_AW_LTC + LTD4_aw_Vd_AW_LTD)/(Kd_LTR2_FEV*(1.0 + (LTC4_aw_out_Vd_AW_LTC + LTD4_aw_Vd_AW_LTD)/Kd_LTR2_FEV)) + LTD4_aw_Vd_AW_LTD*R1_portion_FEV/(Kd_LTR1_FEV*(1.0 + LTD4_aw_Vd_AW_LTD/Kd_LTR1_FEV + ML_airways_conc/EC50_ML_FEV))
	Ca_FEV_LTR2() = k_fev_eff*(Hn_aw_Vd_AW_Hn*(-R1_portion_FEV - R2_portion_FEV + 1.0)/(Kd_Hn_FEV*(Hn_aw_Vd_AW_Hn/Kd_Hn_FEV + 1.0)) + R2_portion_FEV*(LTC4_aw_out_Vd_AW_LTC + LTD4_aw_Vd_AW_LTD)/(Kd_LTR2_FEV*(1.0 + (LTC4_aw_out_Vd_AW_LTC + LTD4_aw_Vd_AW_LTD)/Kd_LTR2_FEV)))/(Ca_FEV - Cao_FEV)
	N_EO_aw_perc() = 0.000122139642252988*N_EO_aw_tot
	N_EO_perc() = 0.000278739428807162*N_EO
	N_EO_b_tot_perc() = 2.34410472897344e-5*N_EO_b_tot
	N_EO_aw_tot_perc() = 0.000122139642252988*N_EO_aw_tot
	EO_b_tot() = EO_a_b_V_B + EO_b_V_B + EO_i_b_V_B
	EO_b_tot_per_ss() = 187617.260787992*EO_b_tot - 100.0
	r_out_FEV() = -Ca_FEV^n_FEV*(R_FEV - (R_FEV*(R_FEV - R_in_relax_FEV)^2.0)^0.333333333333333)/(Ca_FEV^n_FEV + K_Ca_FEV^n_FEV) + R_FEV
	r_in_FEV() = r_out_FEV - (R_FEV/r_out_FEV)^0.5*(R_FEV - R_in_relax_FEV)
	FEV1() = MAX_FEV*(r_in_FEV/R_in_relax_FEV)^2.0
	FEV1_percent() = 28.3446712018141*FEV1 - 100.0
	TSN_Hn() = Ca_FEV^n_FEV*TSN_0*(R_FEV - (R_FEV*(R_FEV - R_in_relax_FEV)^2.0)^0.333333333333333)/(Ca_FEV^n_FEV + K_Ca_FEV^n_FEV)
	OL_aw() = (1.0 - R1_portion_EOa)*(LTC4_aw_out_Vd_AW_LTC + LTD4_aw_Vd_AW_LTD)/(Kd_LT_2*(1.0 + (LTC4_aw_out_Vd_AW_LTC + LTD4_aw_Vd_AW_LTD)/Kd_LT_2)) + LTD4_aw_Vd_AW_LTD*R1_portion_EOa/(Kd_LT*(1.0 + ML_airways_conc/Ki_ML_EOa + LTD4_aw_Vd_AW_LTD/Kd_LT))
	ML_blood_conc() = ML_blood_Vd_ML*fup_ML
	OL_b() = fup_LT*(1.0 - R1_portion_EOa)*(LTC4_b_out_Vd_LTC + LTD4_b_Vd_LTD)/(Kd_LT_2*(1.0 + fup_LT*(LTC4_b_out_Vd_LTC + LTD4_b_Vd_LTD)/Kd_LT_2)) + LTD4_b_Vd_LTD*R1_portion_EOa*fup_LT/(Kd_LT*(1.0 + ML_blood_conc/Ki_ML_EOa + LTD4_b_Vd_LTD*fup_LT/Kd_LT))
	B_hedh_aw() = HETE_aw_Default*NADP_aw*k_hedh_1*k_hedh_2/(Kd_hedh_HETE5*Kd_hedh_NADP) - NADPH_aw*k_hedh_3*k_hedh_4*oxoETE_aw/(Kd_hedh_NADPH*Kd_hedh_oxoETE5)
	delta_LTCs_aw() = GSH_aw*LTA4_aw_Default/(K_LTA*K_LTA_GSH) + GSH_aw/K_GSH + 1.0 + LTC4_aw_Default/K_LTC + LTA4_aw_Default/K_LTA
	den_LTCs_aw() = K_GSH*K_LTA_GSH*K_LTC*delta_LTCs_aw
	FLO2t_aw() = FLO2_aw*(Ca/K_Ca2 + 1.0)
	B_hedh_b() = HETE_b_Default*NADP_b*k_hedh_1*k_hedh_2/(Kd_hedh_HETE5*Kd_hedh_NADP) - NADPH_b*k_hedh_3*k_hedh_4*oxoETE_b/(Kd_hedh_NADPH*Kd_hedh_oxoETE5)
	delta_LTCs_b() = GSH_b*LTA4_b_Default/(K_LTA*K_LTA_GSH) + GSH_b/K_GSH + 1.0 + LTC4_b_Default/K_LTC + LTA4_b_Default/K_LTA
	den_LTCs_b() = K_GSH*K_LTA_GSH*K_LTC*delta_LTCs_b
	FLO2t_b() = FLO2_b*(Ca/K_Ca2 + 1.0)
	PLA2_D() = Ca/K_PLA2_Ca + 1.0
	PLA2_Ca() = Ca/(K_PLA2_Ca*PLA2_D)
	w_EO() = 0.166666666666667*diam_EO^3.0*npi
	V_LTC_CAW() = 0.209999993443489*N_A_pmole*w_EO*(EO_a_aw_V_AW + naEO_LTCsyn*(EO_aw_V_AW + EO_i_aw_V_AW))
	V_aCAW() = 0.209999993443489*EO_a_aw_V_AW*N_A_pmole*w_EO
	V_CAW() = 0.209999993443489*N_A_pmole*w_EO*(EO_a_aw_V_AW + EO_aw_V_AW + EO_i_aw_V_AW)
	V_LTC_CB() = 2.80999994277954*N_A_pmole*w_EO*(EO_a_b_V_B + naEO_LTCsyn*(EO_b_V_B + EO_i_b_V_B))
	V_aCB() = 2.80999994277954*EO_a_b_V_B*N_A_pmole*w_EO
	V_CB() = 2.80999994277954*N_A_pmole*w_EO*(EO_a_b_V_B + EO_b_V_B + EO_i_b_V_B)
	Hn_aw_perc() = 0.00706114955514758*Hn_aw_Vd_AW_Hn
	LTD4_aw_pers() = 0.486003110419907*LTD4_aw_Vd_AW_LTD
	ML_uM() = 1.0e-6*ML_blood_Vd_ML
	LTD4_b_free() = LTD4_b_Vd_LTD*fup_LT
	LTs_aw_pg() = 0.001*LTC4_aw_out_Vd_AW_LTC*M_LTC/fup_LT + 0.001*LTD4_aw_Vd_AW_LTD*M_LTD/fup_LT + 0.001*LTE4_aw_Vd_AW_LTE*M_LTE/fup_LT
	LTC4_b_pM() = 1000000.0*LTC4_b_Default
	EO_aw_tot() = EO_a_aw_V_AW + EO_aw_V_AW + EO_i_aw_V_AW
	N_EO_i_aw() = 602000000.0*EO_i_aw_V_AW
	N_EO_aw() = 602000000.0*EO_aw_V_AW
	N_EO_i_b() = 602000000.0*EO_i_b_V_B
	N_EO_b() = 602000000.0*EO_b_V_B
	N_EO_bm() = 602000000.0*EO_bm_V_BM
	time_day() = 0.000694444444444444*time()
	time_hour() = 0.0166666666666667*time()
	TSN() = Ca_FEV_ex^n_FEV*TSN_0*(R_FEV - (R_FEV*(R_FEV - R_in_relax_FEV)^2.0)^0.333333333333333)/(Ca_FEV_ex^n_FEV + K_Ca_FEV^n_FEV)
	Rec_occup_migr() = IL_b_Vd_IL5*(1.0 - portion_migr)/(IL_b_Vd_IL5 + Kd_IL_migr) + LTE4_b_Vd_LTE*fup_LT*portion_migr/(Kd_LTE_migr + LTE4_b_Vd_LTE*fup_LT)
	nom_LTCs_aw() = Et_LTCs*(GSH_aw*K_LTC*LTA4_aw_Default*k_LTCs_fow - K_GSH*K_LTA_GSH*LTC4_aw_Default*k_LTCs_back)
	B_aw() = GSH_aw^2*HPETE_aw_Default*k_gpx_cat/(Km_gpx_GSH^2*Km_gpx_HPETE5)
	nom_LTCs_b() = Et_LTCs*(GSH_b*K_LTC*LTA4_b_Default*k_LTCs_fow - K_GSH*K_LTA_GSH*LTC4_b_Default*k_LTCs_back)
	B_b() = GSH_b^2*HPETE_b_Default*k_gpx_cat/(Km_gpx_GSH^2*Km_gpx_HPETE5)
	ft_ml() = min(rint(0.5 + time()/T), rint(1 + time()/T))
	ft_zf() = min(rint(0.5 + (time() - 960.0)/T), rint(1 + (time() - 960.0)/T)) + min(rint(0.5 + (time() - 660.0)/T), rint(1 + (time() - 660.0)/T)) + min(rint(0.5 + (time() - 360.0)/T), rint(1 + (time() - 360.0)/T)) + min(rint(0.5 + time()/T), rint(1 + time()/T))
	fRate0() = PL*PLA2_Ca*Vmax_PLA2/(Km_PLA2_APC + PL)
	fRate0m() = V_CoA/(AA_b_Default + Km_CoA_AA)
	fRate1() = FLO3t_b*k_lo/K_AA
	fRate2() = (AA_b_Default/Ki_AA + 1.0)*(-FLO3t_b*HPETE_b_Default*k3 + FLO5HP_b*k_3)
	fRate3() = FLO2_b*r1
	fRate3m() = FLO3_b*r1/Ke_ox
	fRate4() = B_b*GPx/A_b
	fRate5() = FLO5HP_b*k_lta_syn
	fRate6() = nom_LTCs_b/den_LTCs_b
	fRate7() = B_hedh_b*HEDH5/A_hedh_b
	fRate10() = 1000000.0*Kd50*LTC4_b_Default*V_LTC_CB
	fRate11() = fup_LT*k_ggt
	fRate12() = fup_LT*k_dp
	fRate13() = fup_LT*k_ltc_ltd_el
	fRate14() = fup_LT*k_ltc_ltd_el
	fRate15() = LTE4_b_Vd_LTE*fup_LT*(k_acet + k_lte_el)
	fRate16() = OL_b^h_act*ca*ka/(EC50_act^h_act + OL_b^h_act)
	fRate17() = ca*k_EO_m
	fRate18() = ca*kia
	fRate21() = Rec_occup_migr^h_migr*k_EO_t_baw/(EC50_migr^h_migr + Rec_occup_migr^h_migr)
	fRate22() = Rec_occup_migr^h_migr*k_EO_t_baw/(EC50_migr^h_migr + Rec_occup_migr^h_migr)
	fRate23() = Rec_occup_migr^h_migr*k_EO_t_baw/(EC50_migr^h_migr + Rec_occup_migr^h_migr)
	fRate24() = k_Hn_p*(EO_a_b_V_B + EO_b_V_B + EO_i_b_V_B)
	fRate25() = fup_Hn*k_Hn_d
	fRate26() = EO_a_b_V_B*k_IL_p
	fRate28() = -IL_bm_V_BM*J_BM_lymfl + k_IL_t_bbm*(IL_b_Vd_IL5 - IL_bm_V_BM)
	fRate29() = (IL_bm_V_BM^h_matur*k1 + k1_min*(IL_bm_V_BM^h_matur + Km_1^h_matur))/(IL_bm_V_BM^h_matur + Km_1^h_matur)
	fRate30() = ca*k_EO_t_bmb
	fRate31() = PL*PLA2_Ca*Vmax_PLA2/(Km_PLA2_APC + PL)
	fRate31m() = V_CoA/(AA_aw_Default + Km_CoA_AA)
	fRate32() = FLO3t_aw*k_lo/K_AA
	fRate33() = (AA_aw_Default/Ki_AA + 1.0)*(-FLO3t_aw*HPETE_aw_Default*k3 + FLO5HP_aw*k_3)
	fRate34() = FLO2_aw*r1
	fRate34m() = FLO3_aw*r1/Ke_ox
	fRate35() = B_aw*GPx/A_aw
	fRate36() = FLO5HP_aw*k_lta_syn
	fRate37() = nom_LTCs_aw/den_LTCs_aw
	fRate38() = B_hedh_aw*HEDH5/A_hedh_aw
	fRate41() = 1000000.0*Kd50*LTC4_aw_Default*V_LTC_CAW
	fRate44() = Q_AW_blf*R_LTE_AW*R_LTE_B/Kp_LTE_AW
	fRate44m() = Q_AW_blf*R_LTE_B
	fRate45() = Q_AW_blf*R_LTD_AW*R_LTD_B/Kp_LTD_AW
	fRate45m() = Q_AW_blf*R_LTD_B
	fRate46() = Q_AW_blf*R_LTC_AW*R_LTC_B/Kp_LTC_AW
	fRate46m() = Q_AW_blf*R_LTC_B
	fRate47() = OL_aw^h_act*ca*ka/(EC50_act^h_act + OL_aw^h_act)
	fRate48() = ca*k_EO_m
	fRate49() = ca*kia
	fRate52() = k_Hn_p*(EO_a_aw_V_AW + EO_aw_V_AW + EO_i_aw_V_AW)
	fRate53() = Q_AW_blf*R_Hn_AW*R_Hn_B/Kp_Hn_AW
	fRate53m() = Q_AW_blf*R_Hn_B
	fRate54() = EO_a_aw_V_AW*k_IL_p
	fRate55() = IL_aw_V_AW*J_AW_lymfl + k_IL_t_awb*(IL_aw_V_AW - IL_b_Vd_IL5)
	fRate56() = LTE4_aw_Vd_AW_LTE*(k_acet + k_lte_el)
	fRate61() = k_abs_zf*(1000.0*DOSE_zf*F_zf*oral*(a*ft_zf - a + 1.0)/M_ZF + ZF_intes_Default)
	fRate62() = Q_AW_blf*R_ZF_B
	fRate62m() = Q_AW_blf*R_ZF_AW*R_ZF_B/Kp_ZF_AW
	fRate64() = k_abs_ml*(1000000000.0*DOSE_ml*F_ml*oral*(a*ft_ml - a + 1.0)/M_ML + ML_intes_Default)
end functions
begin reaction rules
	v1: 0  <-> AA_b()@Default fRate0(),fRate0m() #Modifiers(AA_b)
	v2: AA_b()@Default -> 0  fRate1() #Modifiers(AA_b)
	v3_products_0: 0  -> HETE(_aw~0,_b~_B,p~P)@Default fRate2() #Modifiers(AA_b, HPETE_b, AA_b)
	v4: HETE(_aw~0,_b~_B,p~P)@Default <-> HETE(_aw~0,_b~_B,p~0)@Default fRate3(),fRate3m() #Modifiers(HPETE_b, HETE_b)
	v5_reactants_0: 0  -> HETE(_aw~0,_b~_B,p~P)@Default -1*(fRate4())
	v5_products_0: 0  -> HETE(_aw~0,_b~_B,p~0)@Default fRate4()
	v6: 0  -> LTA4(_aw~0,_b~_B)@Default fRate5()
	v7_reactants_0: 0  -> LTA4(_aw~0,_b~_B)@Default -1*(fRate6())
	v7_products_0: 0  -> LTC4(_aw~0,_b~_B)@Default fRate6()
	v8_reactants_0: 0  -> HETE(_aw~0,_b~_B,p~0)@Default -1*(fRate7())
	v9: LTA4(_aw~0,_b~_B)@Default -> 0  Kd12 #Modifiers(LTA4_b)
	v10in: LTC4(_aw~0,_b~_B)@Default -> 0  Kd50 #Modifiers(LTC4_b)
	v10out: 0  -> LTC4_b_out(LTC4_aw_out~0)@Vd_LTC fRate10() #Modifiers(LTC4_b, LTC4_b)
	v11: LTC4_b_out(LTC4_aw_out~0)@Vd_LTC -> LTD4(_aw~0,_b~_B)@Vd_LTD fRate11() #Modifiers(LTC4_b_out)
	v12: LTD4(_aw~0,_b~_B)@Vd_LTD -> LTE4(_aw~0,_b~_B)@Vd_LTE fRate12() #Modifiers(LTD4_b)
	v13: LTC4_b_out(LTC4_aw_out~0)@Vd_LTC -> 0  fRate13() #Modifiers(LTC4_b_out)
	v14: LTD4(_aw~0,_b~_B)@Vd_LTD -> 0  fRate14() #Modifiers(LTD4_b)
	v15_reactants_0: 0  -> LTE4(_aw~0,_b~_B)@Vd_LTE -1*(fRate15()) #Modifiers(LTE4_b)
	v16: EO_b(EO_aw~0,_a~0,a_~0,i_~0,m~0)@V_B -> EO_b(EO_aw~0,_a~0,a_~0,i_~I_,m~0)@V_B fRate16() #Modifiers(EO_b)
	v17: EO_b(EO_aw~0,_a~0,a_~0,i_~I_,m~0)@V_B -> EO_b(EO_aw~0,_a~0,a_~A_,i_~0,m~0)@V_B fRate17() #Modifiers(EO_i_b)
	v18: EO_b(EO_aw~0,_a~0,a_~A_,i_~0,m~0)@V_B -> EO_b(EO_aw~0,_a~0,a_~0,i_~0,m~0)@V_B fRate18() #Modifiers(EO_a_b)
	v19: EO_b(EO_aw~0,_a~0,a_~0,i_~0,m~0)@V_B -> 0  k_EO_d #Modifiers(EO_b)
	v20: EO_b(EO_aw~0,_a~0,a_~A_,i_~0,m~0)@V_B -> 0  k_EO_a_d #Modifiers(EO_a_b)
	v21: EO_b(EO_aw~0,_a~0,a_~0,i_~I_,m~0)@V_B -> EO_b(EO_aw~EO_aw,_a~0,a_~0,i_~I_,m~0)@V_AW fRate21() #Modifiers(EO_i_b)
	v22: EO_b(EO_aw~0,_a~0,a_~A_,i_~0,m~0)@V_B -> EO_b(EO_aw~EO_aw,_a~_A,a_~0,i_~0,m~0)@V_AW fRate22() #Modifiers(EO_a_b)
	v23: EO_b(EO_aw~0,_a~0,a_~0,i_~0,m~0)@V_B -> EO_b(EO_aw~EO_aw,_a~0,a_~0,i_~0,m~0)@V_AW fRate23() #Modifiers(EO_b)
	v24: 0  -> Hn_b(Hn_aw~0)@Vd_Hn fRate24() #Modifiers(EO_b, EO_i_b, EO_a_b, EO_b, EO_i_b, EO_a_b)
	v25: Hn_b(Hn_aw~0)@Vd_Hn -> 0  fRate25() #Modifiers(Hn_b)
	v26: 0  -> IL_b(m~0)@Vd_IL5 fRate26() #Modifiers(EO_a_b, EO_a_b)
	v27: IL_b(m~0)@Vd_IL5 -> 0  k_IL_d #Modifiers(IL_b)
	v28_reactants_0: 0  -> IL_b(m~0)@Vd_IL5 -1*(fRate28()) #Modifiers(IL_b, IL_bm)
	v28_products_0: 0  -> IL_b(m~M)@V_BM fRate28() #Modifiers(IL_b, IL_bm)
	v29: 0  -> EO_b(EO_aw~0,_a~0,a_~0,i_~0,m~M)@V_BM fRate29() #Modifiers(IL_bm, IL_bm)
	v30: EO_b(EO_aw~0,_a~0,a_~0,i_~0,m~M)@V_BM -> EO_b(EO_aw~0,_a~0,a_~0,i_~0,m~0)@V_B fRate30() #Modifiers(EO_bm)
	v31: 0  <-> AA_aw()@Default fRate31(),fRate31m() #Modifiers(AA_aw)
	v32: AA_aw()@Default -> 0  fRate32() #Modifiers(AA_aw)
	v33_products_0: 0  -> HETE(_aw~_AW,_b~0,p~P)@Default fRate33() #Modifiers(AA_aw, HPETE_aw, AA_aw)
	v34: HETE(_aw~_AW,_b~0,p~P)@Default <-> HETE(_aw~_AW,_b~0,p~0)@Default fRate34(),fRate34m() #Modifiers(HPETE_aw, HETE_aw)
	v35_reactants_0: 0  -> HETE(_aw~_AW,_b~0,p~P)@Default -1*(fRate35())
	v35_products_0: 0  -> HETE(_aw~_AW,_b~0,p~0)@Default fRate35()
	v36: 0  -> LTA4(_aw~_AW,_b~0)@Default fRate36()
	v37_reactants_0: 0  -> LTA4(_aw~_AW,_b~0)@Default -1*(fRate37())
	v37_products_0: 0  -> LTC4(_aw~_AW,_b~0)@Default fRate37()
	v38_reactants_0: 0  -> HETE(_aw~_AW,_b~0,p~0)@Default -1*(fRate38())
	v39: LTA4(_aw~_AW,_b~0)@Default -> 0  Kd12 #Modifiers(LTA4_aw)
	v40in: LTC4(_aw~_AW,_b~0)@Default -> 0  Kd50 #Modifiers(LTC4_aw)
	v40out: 0  -> LTC4_b_out(LTC4_aw_out~LTC4_aw_out)@Vd_AW_LTC fRate41() #Modifiers(LTC4_aw, LTC4_aw)
	v41: LTC4_b_out(LTC4_aw_out~LTC4_aw_out)@Vd_AW_LTC -> LTD4(_aw~_AW,_b~0)@Vd_AW_LTD k_ggt #Modifiers(LTC4_aw_out)
	v42: LTD4(_aw~_AW,_b~0)@Vd_AW_LTD -> LTE4(_aw~_AW,_b~0)@Vd_AW_LTE k_dp #Modifiers(LTD4_aw)
	v43: LTE4(_aw~_AW,_b~0)@Vd_AW_LTE <-> LTE4(_aw~0,_b~_B)@Vd_LTE fRate44(),fRate44m() #Modifiers(LTE4_aw, LTE4_b)
	v44: LTD4(_aw~_AW,_b~0)@Vd_AW_LTD <-> LTD4(_aw~0,_b~_B)@Vd_LTD fRate45(),fRate45m() #Modifiers(LTD4_aw, LTD4_b)
	v45: LTC4_b_out(LTC4_aw_out~LTC4_aw_out)@Vd_AW_LTC <-> LTC4_b_out(LTC4_aw_out~0)@Vd_LTC fRate46(),fRate46m() #Modifiers(LTC4_aw_out, LTC4_b_out)
	v46: EO_b(EO_aw~EO_aw,_a~0,a_~0,i_~0,m~0)@V_AW -> EO_b(EO_aw~EO_aw,_a~0,a_~0,i_~I_,m~0)@V_AW fRate47() #Modifiers(EO_aw)
	v47: EO_b(EO_aw~EO_aw,_a~0,a_~0,i_~I_,m~0)@V_AW -> EO_b(EO_aw~EO_aw,_a~_A,a_~0,i_~0,m~0)@V_AW fRate48() #Modifiers(EO_i_aw)
	v48: EO_b(EO_aw~EO_aw,_a~_A,a_~0,i_~0,m~0)@V_AW -> EO_b(EO_aw~EO_aw,_a~0,a_~0,i_~0,m~0)@V_AW fRate49() #Modifiers(EO_a_aw)
	v49: EO_b(EO_aw~EO_aw,_a~0,a_~0,i_~0,m~0)@V_AW -> 0  k_EO_d #Modifiers(EO_aw)
	v50: EO_b(EO_aw~EO_aw,_a~_A,a_~0,i_~0,m~0)@V_AW -> 0  k_EO_a_d #Modifiers(EO_a_aw)
	v51: 0  -> Hn_b(Hn_aw~Hn_aw)@Vd_AW_Hn fRate52() #Modifiers(EO_a_aw, EO_i_aw, EO_aw, EO_a_aw, EO_i_aw, EO_aw)
	v52: Hn_b(Hn_aw~Hn_aw)@Vd_AW_Hn <-> Hn_b(Hn_aw~0)@Vd_Hn fRate53(),fRate53m() #Modifiers(Hn_aw, Hn_b)
	v53: 0  -> IL_aw()@V_AW fRate54() #Modifiers(EO_a_aw, EO_a_aw)
	v54_reactants_0: 0  -> IL_aw()@V_AW -1*(fRate55()) #Modifiers(IL_aw, IL_b)
	v54_products_0: 0  -> IL_b(m~0)@Vd_IL5 fRate55() #Modifiers(IL_aw, IL_b)
	v55_reactants_0: 0  -> LTE4(_aw~_AW,_b~0)@Vd_AW_LTE -1*(fRate56()) #Modifiers(LTE4_aw)
	v56: LTD4(_aw~_AW,_b~0)@Vd_AW_LTD -> 0  k_ltc_ltd_el #Modifiers(LTD4_aw)
	v57: LTC4_b_out(LTC4_aw_out~LTC4_aw_out)@Vd_AW_LTC -> 0  k_ltc_ltd_el #Modifiers(LTC4_aw_out)
	v58: IL_aw()@V_AW -> 0  k_IL_d #Modifiers(IL_aw)
	v59: Hn_b(Hn_aw~Hn_aw)@Vd_AW_Hn -> 0  k_Hn_d #Modifiers(Hn_aw)
	v60_reactants_0: 0  -> ZF_intes()@Default -1*(fRate61()) #Modifiers(ZF_intes)
	v60_products_0: 0  -> ZF_blood(ZF_airways~0)@Vd_ZF fRate61() #Modifiers(ZF_intes)
	v61: ZF_blood(ZF_airways~0)@Vd_ZF <-> ZF_blood(ZF_airways~ZF_airways)@Vd_AW_ZF fRate62(),fRate62m() #Modifiers(ZF_blood, ZF_airways)
	v62: ZF_blood(ZF_airways~0)@Vd_ZF -> 0  k_elim_zf #Modifiers(ZF_blood)
	v63_reactants_0: 0  -> ML_intes()@Default -1*(fRate64()) #Modifiers(ML_intes)
	v63_products_0: 0  -> ML_blood()@Vd_ML fRate64() #Modifiers(ML_intes)
	v64: ML_blood()@Vd_ML -> 0  k_elim_ml #Modifiers(ML_blood)
end reaction rules
end model
