###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1310130000', 'http://identifiers.org/biomodels.db/BIOMD0000000495']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/24209716']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0008654']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/5850']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 11 molecules and 17 reactions. The translated model has 8 molecules and 17 rules'
###
begin model
begin parameters
	mwee07eca4_0806_4cc3_a6ab_9226ee79be6c 3.40936490738966e-06 #units:MWDERIVEDUNIT_mole__liter__minute
	mw8f20c25d_9700_4822_b5f9_fe243e001091 0.000362894258752347 #units:MWDERIVEDUNIT_mole__liter
	mw7ce1b6a3_e65e_4aaa_9c32_aeefb420f0ea 1.30568052867489e-06 #units:MWDERIVEDUNIT_mole__liter__minute
	mw85485398_9f97_408c_bca6_90f0a8377eae 0.000796722533770371 #units:MWDERIVEDUNIT_mole__liter
	mw798d0b02_925e_471b_a372_526d681cc370 2.620389955953e-06 #units:MWDERIVEDUNIT_mole__liter__minute
	mwd3807289_133c_4621_8087_366621f553d3 2.39591245105385e-05 #units:MWDERIVEDUNIT_mole__liter
	mw2439178f_a48f_4425_82f9_13267b917b85 8.62083015294042e-06 #units:MWDERIVEDUNIT_mole__liter__minute
	mw5c4edb54_cfd9_43af_b70b_e9ff1b44dc55 0.000108608492867695 #units:MWDERIVEDUNIT_mole__liter
	mw961dacfa_f443_4814_ad6c_a27c04e74268 1.0780611108133e-06 #units:MWDERIVEDUNIT_mole__liter__minute
	mw15ba24b5_7a87_479e_9be7_261b12cbdb63 0.000122223738254533 #units:MWDERIVEDUNIT_mole__liter
	mw9f56ecc5_c22b_4f8c_8b82_90e2a6d9e364 2.24518521682572e-06 #units:MWDERIVEDUNIT_mole__liter__minute
	mw18bbabcb_d229_4d91_99f1_484f2ba8f020 0.000203868171233541 #units:MWDERIVEDUNIT_mole__liter
	mwba0debe9_c575_4f5a_a980_e2b6857ff053 5.61352652271706e-06 #units:MWDERIVEDUNIT_mole__liter__minute
	mwffba86ff_a560_401a_93d6_c0e30bf42c87 0.000227368268903121 #units:MWDERIVEDUNIT_mole__liter
	mw231a5907_d1ee_4a43_83ab_abb72f19502c 4.12788404046025e-07 #units:MWDERIVEDUNIT_mole__liter__minute
	mwaf289d12_4291_4651_8bd1_82e321e476a4 3.10498877738431e-05 #units:MWDERIVEDUNIT_mole__liter
	mw1a53a2cb_a3a7_40d7_ae07_4d93ad1123a3 0.00141678261342411 #units:MWDERIVEDUNIT_mole__liter__minute
	mw4035a2c9_3cda_467c_83cc_8f9c2902abaf 0.321125432799976 #units:MWDERIVEDUNIT_mole__liter
	mwf7d1ff9f_1734_4232_9a96_037b31b193b0 6.97333029651601e-07 #units:MWDERIVEDUNIT_mole__liter__minute
	mw7d57aa6b_1bfb_4472_b555_919263d9eaf9 3.76085190209901e-06 #units:MWDERIVEDUNIT_mole__liter
	mw5ffad843_5f02_419d_ba99_6e1f9b7e6b7b 8.99054709659885e-05 #units:MWDERIVEDUNIT_mole__liter__minute
	mw3046ca21_42a2_4a4b_89c4_9d6ca3d927c5 0.171122974053956 #units:MWDERIVEDUNIT_mole__liter
	mw87bb1238_3292_467e_bfe3_ff7f1e64a351 1.5662833197895e-06 #units:MWDERIVEDUNIT_mole__liter__minute
	mw371071cd_ec20_4517_acc1_08dfdc871e87 2.41308392167819e-05 #units:MWDERIVEDUNIT_mole__liter
	mw5b225cdc_783f_4a15_93db_e960a2398b8e 1.53754224136353e-06 #units:MWDERIVEDUNIT_mole__liter__minute
	mw27f524cb_75b3_401c_8533_99d6f27af654 0.000203777063277265 #units:MWDERIVEDUNIT_mole__liter
	mwc623d82f_a94e_4460_9aed_444597a728c2 0.00077375270429582 #units:MWDERIVEDUNIT_mole__liter__minute
	mwbf296afc_5e4f_4819_8028_06b20d7af7ca 0.155164586398126 #units:MWDERIVEDUNIT_mole__liter
	mw91e15e1e_c73e_4866_ab2b_8225a32b7610 2.32432741134546e-07 #units:MWDERIVEDUNIT_mole__liter__minute
	mwf5cecb8f_89f8_4fba_b39b_b517d0bef2ce 0.000102326862282225 #units:MWDERIVEDUNIT_mole__liter
	mwff26437c_166b_4946_ad35_f13df6145780 5.55658410000431e-07 #units:MWDERIVEDUNIT_mole__liter__minute
	mw284c519a_cc2b_4a98_99ce_5a4471af99e1 3.04072645117622e-05 #units:MWDERIVEDUNIT_mole__liter
	mw2cd81e51_eb11_4e2c_b609_b2f802438a6b 0.0005 #units:MWDERIVEDUNIT_1__minute
	mwff99ad6c_8951_4d58_a836_cf2d3d08ac86 0.000132810241970949 #units:MWDERIVEDUNIT_1__minute
end parameters
begin molecule types
	#^ bqbiol:isVersionOf chebi:CHEBI:17822
	Ser(e~E~0)
	#^ bqbiol:isVersionOf chebi:CHEBI:17553
	PEtn()
	#^ bqbiol:isVersionOf chebi:CHEBI:16038
	PE()
	#^ bqbiol:isVersionOf chebi:CHEBI:15354
	Cho(e~E~0)
	#^ bqbiol:isVersionOf chebi:CHEBI:16000
	Etn(e~E~0)
	#^ bqbiol:isVersionOf chebi:CHEBI:49183
	PC()
	#^ bqbiol:isVersionOf chebi:CHEBI:18132
	PCho()
	#^ bqbiol:isVersionOf chebi:CHEBI:72738
	PS()
end molecule types
begin seed species
	Ser(e~E) 6.022000000000001e+19 # 0.0001mol/L * 6.022e23/mol *1.0L #SerE #mw73259e20_240e_4f3a_b2e0_9ca248658898
	Cho(e~E) 3.0110000000000004e+19 #original 5e-05mol/L  #ChoE #mw919f8a86_e702_4b24_9cd7_adad694fcf9b
end seed species
begin observables
	Species SerE Ser(e~E) #SerE
	Species Ser Ser(e~0) #Ser
	Species PS PS() #PS
	Species Etn Etn(e~0) #Etn
	Species PEtn PEtn() #PEtn
	Species PCho PCho() #PCho
	Species PE PE() #PE
	Species PC PC() #PC
	Species ChoE Cho(e~E) #ChoE
	Species Cho Cho(e~0) #Cho
	Species EtnE Etn(e~E) #EtnE
end observables
begin functions
	fRate0() = mwee07eca4_0806_4cc3_a6ab_9226ee79be6c/(SerE + mw8f20c25d_9700_4822_b5f9_fe243e001091)
	fRate1() = mw7ce1b6a3_e65e_4aaa_9c32_aeefb420f0ea/(Ser + mw85485398_9f97_408c_bca6_90f0a8377eae)
	fRate2() = mw798d0b02_925e_471b_a372_526d681cc370/(Ser + mwd3807289_133c_4621_8087_366621f553d3)
	fRate3() = mw2439178f_a48f_4425_82f9_13267b917b85/(Etn + mw5c4edb54_cfd9_43af_b70b_e9ff1b44dc55)
	fRate4() = mw961dacfa_f443_4814_ad6c_a27c04e74268/(PEtn + mw15ba24b5_7a87_479e_9be7_261b12cbdb63)
	fRate5() = mw9f56ecc5_c22b_4f8c_8b82_90e2a6d9e364/(PS + mw18bbabcb_d229_4d91_99f1_484f2ba8f020)
	fRate6() = mwba0debe9_c575_4f5a_a980_e2b6857ff053/(PEtn + mwffba86ff_a560_401a_93d6_c0e30bf42c87)
	fRate7() = mw231a5907_d1ee_4a43_83ab_abb72f19502c/(PCho + mwaf289d12_4291_4651_8bd1_82e321e476a4)
	fRate8() = mw1a53a2cb_a3a7_40d7_ae07_4d93ad1123a3/(PE + mw4035a2c9_3cda_467c_83cc_8f9c2902abaf)
	fRate9() = mwf7d1ff9f_1734_4232_9a96_037b31b193b0/(PC + mw7d57aa6b_1bfb_4472_b555_919263d9eaf9)
	fRate10() = mw5ffad843_5f02_419d_ba99_6e1f9b7e6b7b/(PE + mw3046ca21_42a2_4a4b_89c4_9d6ca3d927c5)
	fRate11() = mw87bb1238_3292_467e_bfe3_ff7f1e64a351/(PC + mw371071cd_ec20_4517_acc1_08dfdc871e87)
	fRate12() = mw5b225cdc_783f_4a15_93db_e960a2398b8e/(PS + mw27f524cb_75b3_401c_8533_99d6f27af654)
	fRate13() = PS*mwc623d82f_a94e_4460_9aed_444597a728c2/(PS + mwbf296afc_5e4f_4819_8028_06b20d7af7ca)
	fRate14() = mw91e15e1e_c73e_4866_ab2b_8225a32b7610/(ChoE + mwf5cecb8f_89f8_4fba_b39b_b517d0bef2ce)
	fRate15() = mwff26437c_166b_4946_ad35_f13df6145780/(Cho + mw284c519a_cc2b_4a98_99ce_5a4471af99e1)
end functions
begin reaction rules
	mw79830677_2d7e_4f49_9d0b_f05fe026749f: Ser(e~E) -> Ser(e~0) fRate0() #Modifiers(mw73259e20_240e_4f3a_b2e0_9ca248658898, mw73259e20_240e_4f3a_b2e0_9ca248658898)
	mw155447fb_ce5b_4ba2_bd74_434951481a78: Ser(e~0) -> PS() fRate1() #Modifiers(mw15abaa48_d7d0_4845_ae04_c573d289d495, mw15abaa48_d7d0_4845_ae04_c573d289d495)
	mw4c9aa283_577e_4b6c_ae5a_c96f62dbbb08: Ser(e~0) -> Etn(e~0) fRate2() #Modifiers(mw15abaa48_d7d0_4845_ae04_c573d289d495, mw15abaa48_d7d0_4845_ae04_c573d289d495)
	mw55fba323_0865_4254_a6e9_09acd2b4a10f: Etn(e~0) -> PEtn() fRate3() #Modifiers(mw8796c919_9251_4970_8f87_0bca9ecfeb5c, mw8796c919_9251_4970_8f87_0bca9ecfeb5c)
	mwb8420f59_69c3_4707_918c_2e06bedff243: PEtn() -> PCho() fRate4() #Modifiers(mw849ed3fd_87d9_44d2_9f3e_4d631b900d41, mw849ed3fd_87d9_44d2_9f3e_4d631b900d41)
	mwc9170c21_608b_4bd7_b2d0_f359d045da17: PS() -> PE() fRate5() #Modifiers(mwfcfaf604_14d4_47a6_b021_226d1fb5497c, mwfcfaf604_14d4_47a6_b021_226d1fb5497c)
	mwb47b4c45_fac9_49e6_a6a4_87b9050ddfbb: PEtn() -> PE() fRate6() #Modifiers(mw849ed3fd_87d9_44d2_9f3e_4d631b900d41, mw849ed3fd_87d9_44d2_9f3e_4d631b900d41)
	mw4f62d07e_217b_4602_b6fe_548af112eec8: PCho() -> PC() fRate7() #Modifiers(mwcb834e43_dc57_45ae_9452_f4c10955caf1, mwcb834e43_dc57_45ae_9452_f4c10955caf1)
	mw307551ca_91cc_4634_bba5_0e3ecd38cfdd: PE() -> PC() fRate8() #Modifiers(mwf166ad55_4ff0_49fb_95d2_b657ad7653d5, mwf166ad55_4ff0_49fb_95d2_b657ad7653d5)
	mw15bb92b6_4cff_4a41_b815_c1d904618e57: PC() -> PS() fRate9() #Modifiers(mwee54b5b4_b8c0_41df_8dda_5b160c5e10a5, mwee54b5b4_b8c0_41df_8dda_5b160c5e10a5)
	mw106407fc_e33f_45aa_b5ae_258bd4790633: PE() -> PS() fRate10() #Modifiers(mwf166ad55_4ff0_49fb_95d2_b657ad7653d5, mwf166ad55_4ff0_49fb_95d2_b657ad7653d5)
	mwfb854977_51ea_4daa_b84e_3bcb2fcccd39: PC() -> 0  fRate11() #Modifiers(mwee54b5b4_b8c0_41df_8dda_5b160c5e10a5, mwee54b5b4_b8c0_41df_8dda_5b160c5e10a5)
	mwd71cb6c2_6420_46b9_ab17_eedc7b0fd8dc: PS() -> 0  fRate12() #Modifiers(mwfcfaf604_14d4_47a6_b021_226d1fb5497c, mwfcfaf604_14d4_47a6_b021_226d1fb5497c)
	mwdd7079dc_8d70_41b7_a369_3334522cdd13_reactants_0: 0  -> PE() -1*(fRate13()) #Modifiers(mwfcfaf604_14d4_47a6_b021_226d1fb5497c, mwfcfaf604_14d4_47a6_b021_226d1fb5497c)
	mwa25d1a3d_bbd9_41b8_8274_236f9d67bb60: Cho(e~E) -> Cho(e~0) fRate14() #Modifiers(mw919f8a86_e702_4b24_9cd7_adad694fcf9b, mw919f8a86_e702_4b24_9cd7_adad694fcf9b)
	mw185e644d_6f10_499f_a3a6_5a47d7ba2eef: Cho(e~0) -> PCho() fRate15() #Modifiers(mw812f63db_4cb0_40ad_b92b_9874be969dfe, mw812f63db_4cb0_40ad_b92b_9874be969dfe)
	mw5194cffd_f75a_4c61_b60e_23d5b0fea120: Etn(e~E) <-> Etn(e~0) mw2cd81e51_eb11_4e2c_b609_b2f802438a6b,mwff99ad6c_8951_4d58_a836_cf2d3d08ac86 #Modifiers(mw08818dfe_fb12_45cc_8c1d_d965f142d0ce, mw8796c919_9251_4970_8f87_0bca9ecfeb5c, mw08818dfe_fb12_45cc_8c1d_d965f142d0ce, mw8796c919_9251_4970_8f87_0bca9ecfeb5c)
end reaction rules
end model
