###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000499', 'http://identifiers.org/biomodels.db/MODEL1203120000']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/24327760']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/biomodels.db/BIOMD0000000173']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0007179', 'http://identifiers.org/go/GO:0060395']
#@creatorEmail:'pedro.vizan@cancer.org.uk'
#@creatorName:'Vizán Pedro'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 26 molecules and 0 reactions. The translated model has 7 molecules and 13 rules'
###
begin model
begin parameters
	parameter_1 0.32
	parameter_2 20.0
	parameter_3 9.36
	parameter_4 0.08
	parameter_6 21.3715
	parameter_7 24.0
	parameter_8 60.0
	parameter_11 5.7
	parameter_12 4.0
	parameter_13 2.27
	parameter_14 1.0
	parameter_15 1.0
	parameter_16 0.05
	parameter_17 0.196565
	parameter_18 100.0
	parameter_22 24.5383
	parameter_23 2.0
	parameter_24 2.0
	parameter_25 0.35
	Metabolite_9 (0.558933528122717)
	parameter_5 0
	parameter_26 0
	parameter_27 0
	parameter_28 0
	Rcom_S 3.0110000000000005e+22 #original 0.05substance/volume
	S2n 3.365897706355002e+23 #original 0.558933528122717substance/volume
	S4n 6.022e+23 #original 1.0substance/volume
	S4fc 6.022e+23 #original 1.0substance/volume
	S4fn 6.022e+23 #original 1.0substance/volume
	Rtot 6.022e+23 #original 1.0substance/volume
	Rcom_I 4.237703703703706e+22 #original 0.0703703703703704substance/volume
end parameters
begin molecule types
	S2c()
	Ract()
	Rcom()
	R()
	TGF()
	RT()
	#^ bqbiol:hasPart uniprot:Q15796, uniprot:Q13485
	S24(S22~S22~0,S22c~S22c~0,S22n~S22n~0,S24c~S24c~0,S24n~S24n~0,S4c~S4c~0,pS2c~pS2c~0,pS2n~pS2n~0,pS2tot~pS2tot~0)
end molecule types
begin seed species
	TGF()() (2.0) * (2.0) #species_4
	R()() (1 -(0.05)) / ((0.08) + 1) #species_5
	S2c()() (1.0) * (20.0) * (1 + (2.27)) / ((9.36) + (2.27) * (20.0)) #species_6
	Rcom()() ((0.05) + (0.08)) / (1 + (0.08)) #species_7
	S24(S22~0,S22c~0,S22n~0,S24c~0,S24n~0,S4c~S4c,pS2c~0,pS2n~0,pS2tot~0) (1.0) #species_19
end seed species
begin observables
	Species S22 S24(S22~S22,S22c~0,S22n~0,S24c~0,S24n~0,S4c~0,pS2c~0,pS2n~0,pS2tot~0) #S22
	Species S24 S24(S22~0,S22c~0,S22n~0,S24c~0,S24n~0,S4c~0,pS2c~0,pS2n~0,pS2tot~0) #S24
	Species pS2tot S24(S22~0,S22c~0,S22n~0,S24c~0,S24n~0,S4c~0,pS2c~0,pS2n~0,pS2tot~pS2tot) #pS2tot
	Species TGF TGF() #TGF
	Species R R() #R
	Species S2c S2c() #S2c
	Species Rcom Rcom() #Rcom
	Species pS2c S24(S22~0,S22c~0,S22n~0,S24c~0,S24n~0,S4c~0,pS2c~pS2c,pS2n~0,pS2tot~0) #pS2c
	Species S22n S24(S22~0,S22c~0,S22n~S22n,S24c~0,S24n~0,S4c~0,pS2c~0,pS2n~0,pS2tot~0) #S22n
	Species S22c S24(S22~0,S22c~S22c,S22n~0,S24c~0,S24n~0,S4c~0,pS2c~0,pS2n~0,pS2tot~0) #S22c
	Species pS2n S24(S22~0,S22c~0,S22n~0,S24c~0,S24n~0,S4c~0,pS2c~0,pS2n~pS2n,pS2tot~0) #pS2n
	Species S24n S24(S22~0,S22c~0,S22n~0,S24c~0,S24n~S24n,S4c~0,pS2c~0,pS2n~0,pS2tot~0) #S24n
	Species S24c S24(S22~0,S22c~0,S22n~0,S24c~S24c,S24n~0,S4c~0,pS2c~0,pS2n~0,pS2tot~0) #S24c
	Species S4c S24(S22~0,S22c~0,S22n~0,S24c~0,S24n~0,S4c~S4c,pS2c~0,pS2n~0,pS2tot~0) #S4c
	Species RT RT() #RT
	Species Ract Ract() #Ract
end observables
begin functions
	pS2fc_ar() = -2*S22c - S24c + pS2c
	S24n_ar() = S24*(parameter_13 + 1) - S24c*parameter_13
	S4n_ar() = -S4c*parameter_13 + parameter_15*(parameter_13 + 1)
	S4fn_ar() = -S24n_ar + S4n_ar
	S4fc_ar() = -S24c + S4c
	parameter_10() = 0.171
	parameter_9() = parameter_8/parameter_10
	pS2n_ar() = -pS2c*parameter_13 + pS2tot*(parameter_13 + 1)
	S22n_ar() = S22*(parameter_13 + 1) - S22c*parameter_13
	pS2fn_ar() = -2*S22n_ar - S24n_ar + pS2n_ar
	arRatespecies_2() = (-parameter_8*(S24c*parameter_13 + S24n_ar) + parameter_9*(S4fc_ar*pS2fc_ar*parameter_13 + S4fn_ar*pS2fn_ar))/(parameter_13 + 1)
	arRatespecies_1() = (-parameter_8*(S22c*parameter_13 + S22n_ar) + parameter_9*(pS2fc_ar^2*parameter_13 + pS2fn_ar^2))/(parameter_13 + 1)
	parameter_19() = parameter_3
	arRatespecies_19() = S4fn_ar*parameter_19 - parameter_3*(S24c*parameter_11 + S4fc_ar)
	arRatespecies_17() = -S24c*(parameter_11*parameter_3 + parameter_8) + S4fc_ar*pS2fc_ar*parameter_9
	arRatespecies_13() = -S22c*(parameter_11*parameter_3 + parameter_8) + pS2fc_ar^2*parameter_9
	arRatespecies_8() = Ract*S2c*parameter_17*parameter_6/(SBI + parameter_17) + pS2fn_ar*parameter_2 - parameter_3*(pS2fc_ar + parameter_11*(2*S22c + S24c))
	parameter_21() = parameter_16*(parameter_4 + 1)/(parameter_4*(1 - parameter_16))
	Rcom_I_ar() = Rcom/(parameter_21 + 1)
	Rcom_S_ar() = Rcom*parameter_21/(parameter_21 + 1)
	arRatespecies_7() = parameter_1*(R*parameter_4 - Rcom_I_ar*(1 - parameter_28) - Rcom_S_ar*TGF*parameter_18)
	arRatespecies_4() = parameter_1*(S24n_ar*parameter_26 - TGF*(Rcom_S_ar*parameter_18 + parameter_25) + parameter_27)
	S2n_ar() = -S2c*parameter_13 + (-pS2tot + parameter_14)*(parameter_13 + 1)
	parameter_20() = (S2n_ar + pS2n_ar)/Metabolite_9
	arRatespecies_24() = parameter_1*(-RT*(parameter_12*(1 - parameter_28) + parameter_22) + Rcom_S_ar*TGF*parameter_18)
	arRatespecies_6() = -S2c*(Ract*parameter_17*parameter_6/(SBI + parameter_17) + parameter_3) + S2n_ar*parameter_2
	arRatespecies_3() = (Ract*S2c*parameter_13*parameter_17*parameter_6/(SBI + parameter_17) - pS2fn_ar*parameter_7)/(parameter_13 + 1)
	arRatespecies_26() = parameter_1*(RT*parameter_22 - Ract*parameter_12*(1 - parameter_28))
	arRatespecies_5() = parameter_1*(-R*(-parameter_28 + parameter_4 + 1) + (1 - parameter_16)*(1 - parameter_5))
	Rtot_ar() = R + RT + Ract + Rcom
end functions
begin reaction rules
	0  -> S24(S22~S22,S22c~0,S22n~0,S24c~0,S24n~0,S4c~0,pS2c~0,pS2n~0,pS2tot~0) arRatespecies_1 #rateLaw
	0  -> S24(S22~0,S22c~0,S22n~0,S24c~0,S24n~0,S4c~0,pS2c~0,pS2n~0,pS2tot~0) arRatespecies_2 #rateLaw
	0  -> S24(S22~0,S22c~0,S22n~0,S24c~0,S24n~0,S4c~0,pS2c~0,pS2n~0,pS2tot~pS2tot) arRatespecies_3 #rateLaw
	0  -> TGF() arRatespecies_4 #rateLaw
	0  -> R() arRatespecies_5 #rateLaw
	0  -> S2c() arRatespecies_6 #rateLaw
	0  -> Rcom() arRatespecies_7 #rateLaw
	0  -> S24(S22~0,S22c~0,S22n~0,S24c~0,S24n~0,S4c~0,pS2c~pS2c,pS2n~0,pS2tot~0) arRatespecies_8 #rateLaw
	0  -> S24(S22~0,S22c~S22c,S22n~0,S24c~0,S24n~0,S4c~0,pS2c~0,pS2n~0,pS2tot~0) arRatespecies_13 #rateLaw
	0  -> S24(S22~0,S22c~0,S22n~0,S24c~S24c,S24n~0,S4c~0,pS2c~0,pS2n~0,pS2tot~0) arRatespecies_17 #rateLaw
	0  -> S24(S22~0,S22c~0,S22n~0,S24c~0,S24n~0,S4c~S4c,pS2c~0,pS2n~0,pS2tot~0) arRatespecies_19 #rateLaw
	0  -> RT() arRatespecies_24 #rateLaw
	0  -> Ract() arRatespecies_26 #rateLaw
end reaction rules
end model
