###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1311130000', 'http://identifiers.org/biomodels.db/BIOMD0000000501']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/24413774']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0060333']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/10090']
#@creatorEmail:'juty@ebi.ac.uk'
#@creatorName:'Juty Nick'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 35 molecules and 57 reactions. The translated model has 26 molecules and 57 rules'
###
begin model
begin parameters
	Kon_P1 60000.0
	Koff_P1 100.0
	Kon_G1 20000000000.0
	Koff_G1 100.0
	Kon_NG1 20000000000.0
	Koff_NG1 5000.0
end parameters
begin molecule types
	DNA0100()
	DNA111_1()
	DNA1110()
	#^ bqbiol:isVersionOf uniprot:P42225
	S1(dna0000)
	DNA1001()
	DNA0000(_~_~0,_2~_~0,_3~_~0,s1,s1,s1,s1)
	DNA1_110()
	DNA0010()
	DNA1_101()
	DNA11_10()
	DNA1_1_10()
	DNA11_11()
	DNA1000()
	DNA1011()
	DNA0110()
	DNA1101()
	DNA011_1()
	DNA1_100()
	DNA11_1_1()
	DNA1_1_11()
	DNA01_10()
	DNA0101()
	DNA1010()
	DNA1100()
	DNA101_1()
	DNA11_1()
end molecule types
begin seed species
	S1(dna0000) 6603002560000.0 # 1.09648e-11mol/L * 6.022e23/mol *1.0L #S1 #S1
	DNA0000(_~0,_2~0,_3~0,s1,s1,s1,s1) 60220000000000.01 #original 1e-10mol/L #DNA0000 #DNA0000
end seed species
begin observables
	Species S1 S1(dna0000) #S1
	Species DNA0000 DNA0000(_~0,_2~0,_3~0,s1,s1,s1,s1) #DNA0000
	Species DNA0001 DNA0000(_~0,_2~0,_3~0,s1!946,s1,s1,s1).S1(dna0000!946) #DNA0001
	Species DNA0010 DNA0010() #DNA0010
	Species DNA0100 DNA0100() #DNA0100
	Species DNA1000 DNA1000() #DNA1000
	Species DNA1100 DNA1100() #DNA1100
	Species DNA1010 DNA1010() #DNA1010
	Species DNA1001 DNA1001() #DNA1001
	Species DNA0110 DNA0110() #DNA0110
	Species DNA0101 DNA0101() #DNA0101
	Species DNA0011 DNA0000(_~0,_2~0,_3~0,s1!946,s1!947,s1,s1).S1(dna0000!946).S1(dna0000!947) #DNA0011
	Species DNA1110 DNA1110() #DNA1110
	Species DNA1011 DNA1011() #DNA1011
	Species DNA1101 DNA1101() #DNA1101
	Species DNA0111 DNA0000(_~0,_2~0,_3~0,s1!946,s1!947,s1!948,s1).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948) #DNA0111
	Species DNA1111 DNA0000(_~0,_2~0,_3~0,s1!946,s1!947,s1!948,s1!949).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948).S1(dna0000!949) #DNA1111
	Species DNA001_1 DNA0000(_~_,_2~0,_3~0,s1!946,s1!947,s1,s1).S1(dna0000!946).S1(dna0000!947) #DNA001_1
	Species DNA01_10 DNA01_10() #DNA01_10
	Species DNA01_11 DNA0000(_~_,_2~0,_3~0,s1!946,s1!947,s1!948,s1).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948) #DNA01_11
	Species DNA011_1 DNA011_1() #DNA011_1
	Species DNA01_1_1 DNA0000(_~_,_2~_,_3~0,s1!946,s1!947,s1!948,s1).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948) #DNA01_1_1
	Species DNA101_1 DNA101_1() #DNA101_1
	Species DNA1_100 DNA1_100() #DNA1_100
	Species DNA1_101 DNA1_101() #DNA1_101
	Species DNA1_110 DNA1_110() #DNA1_110
	Species DNA11_10 DNA11_10() #DNA11_10
	Species DNA1_1_10 DNA1_1_10() #DNA1_1_10
	Species DNA1_111 DNA0000(_~_,_2~0,_3~0,s1!946,s1!947,s1!948,s1!949).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948).S1(dna0000!949) #DNA1_111
	Species DNA11_11 DNA11_11() #DNA11_11
	Species DNA111_1 DNA111_1() #DNA111_1
	Species DNA1_1_11 DNA1_1_11() #DNA1_1_11
	Species DNA1_11_1 DNA0000(_~_,_2~_,_3~0,s1!946,s1!947,s1!948,s1!949).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948).S1(dna0000!949) #DNA1_11_1
	Species DNA11_1_1 DNA11_1_1() #DNA11_1_1
	Species DNA1_1_1_1 DNA0000(_~_,_2~_,_3~_,s1!946,s1!947,s1!948,s1!949).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948).S1(dna0000!949) #DNA1_1_1_1
end observables
begin functions
	parameter_1() = DNA0100 + DNA0101 + DNA0110 + DNA0111 + DNA011_1 + DNA01_10 + DNA01_11 + DNA01_1_1 + DNA1100 + DNA1101 + DNA1110 + DNA1111 + DNA111_1 + DNA11_10 + DNA11_11 + DNA11_1_1 + DNA1_100 + DNA1_101 + DNA1_110 + DNA1_111 + DNA1_11_1 + DNA1_1_10 + DNA1_1_11 + DNA1_1_1_1
end functions
begin reaction rules
	DNA1: DNA0000(_~0,_2~0,_3~0,s1,s1,s1,s1) + S1(dna0000) <-> DNA0000(_~0,_2~0,_3~0,s1!946,s1,s1,s1).S1(dna0000!946) Kon_NG1,Koff_NG1 #Modifiers(DNA0000, DNA0001, S1)
	DNA2: DNA0000(_~0,_2~0,_3~0,s1,s1,s1,s1) + S1(dna0000) <-> DNA0010() Kon_G1,Koff_G1 #Modifiers(DNA0000, DNA0010, S1)
	DNA3: DNA0000(_~0,_2~0,_3~0,s1!946,s1,s1,s1).S1(dna0000!946) + S1(dna0000) <-> DNA0000(_~0,_2~0,_3~0,s1!946,s1!947,s1,s1).S1(dna0000!946).S1(dna0000!947) Kon_G1,Koff_G1 #Modifiers(DNA0001, DNA0011, S1)
	DNA4: DNA0010() + S1(dna0000) <-> DNA0000(_~0,_2~0,_3~0,s1!946,s1!947,s1,s1).S1(dna0000!946).S1(dna0000!947) Kon_NG1,Koff_NG1 #Modifiers(DNA0010, DNA0011, S1)
	DNA5: DNA0000(_~0,_2~0,_3~0,s1,s1,s1,s1) + S1(dna0000) <-> DNA0100() Kon_G1,Koff_G1 #Modifiers(DNA0000, DNA0100, S1)
	DNA6: DNA0100() + S1(dna0000) <-> DNA0101() Kon_NG1,Koff_NG1 #Modifiers(DNA0100, DNA0101, S1)
	DNA7: DNA0000(_~0,_2~0,_3~0,s1!946,s1,s1,s1).S1(dna0000!946) + S1(dna0000) <-> DNA0101() Kon_G1,Koff_G1 #Modifiers(DNA0001, DNA0101, S1)
	DNA8: DNA0010() + S1(dna0000) <-> DNA0110() Kon_G1,Koff_G1 #Modifiers(DNA0010, DNA0110, S1)
	DNA9: DNA0100() + S1(dna0000) <-> DNA0110() Kon_G1,Koff_G1 #Modifiers(DNA0100, DNA0110, S1)
	DNA10: DNA0000(_~0,_2~0,_3~0,s1!946,s1!947,s1,s1).S1(dna0000!946).S1(dna0000!947) + S1(dna0000) <-> DNA0000(_~0,_2~0,_3~0,s1!946,s1!947,s1!948,s1).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948) Kon_G1,Koff_G1 #Modifiers(DNA0011, DNA0111, S1)
	DNA11: DNA0101() + S1(dna0000) <-> DNA0000(_~0,_2~0,_3~0,s1!946,s1!947,s1!948,s1).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948) Kon_G1,Koff_G1 #Modifiers(DNA0101, DNA0111, S1)
	DNA12: DNA0110() + S1(dna0000) <-> DNA0000(_~0,_2~0,_3~0,s1!946,s1!947,s1!948,s1).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948) Kon_NG1,Koff_NG1 #Modifiers(DNA0110, DNA0111, S1)
	DNA13: DNA0000(_~0,_2~0,_3~0,s1,s1,s1,s1) + S1(dna0000) <-> DNA1000() Kon_NG1,Koff_NG1 #Modifiers(DNA0000, DNA1000, S1)
	DNA14: DNA0000(_~0,_2~0,_3~0,s1!946,s1,s1,s1).S1(dna0000!946) + S1(dna0000) <-> DNA1001() Kon_NG1,Koff_NG1 #Modifiers(DNA0001, DNA1001, S1)
	DNA15: DNA1000() + S1(dna0000) <-> DNA1001() Kon_NG1,Koff_NG1 #Modifiers(DNA1000, DNA1001, S1)
	DNA16: DNA1000() + S1(dna0000) <-> DNA1010() Kon_G1,Koff_G1 #Modifiers(DNA1000, DNA1010, S1)
	DNA17: DNA0010() + S1(dna0000) <-> DNA1010() Kon_NG1,Koff_NG1 #Modifiers(DNA0010, DNA1010, S1)
	DNA18: DNA0000(_~0,_2~0,_3~0,s1!946,s1!947,s1,s1).S1(dna0000!946).S1(dna0000!947) + S1(dna0000) <-> DNA1011() Kon_NG1,Koff_NG1 #Modifiers(DNA0011, DNA1011, S1)
	DNA19: DNA1001() + S1(dna0000) <-> DNA1011() Kon_G1,Koff_G1 #Modifiers(DNA1001, DNA1011, S1)
	DNA20: DNA1010() + S1(dna0000) <-> DNA1011() Kon_NG1,Koff_NG1 #Modifiers(DNA1010, DNA1011, S1)
	DNA21: DNA1000() + S1(dna0000) <-> DNA1100() Kon_G1,Koff_G1 #Modifiers(DNA1000, DNA1100, S1)
	DNA22: DNA0100() + S1(dna0000) <-> DNA1100() Kon_NG1,Koff_NG1 #Modifiers(DNA0100, DNA1100, S1)
	DNA23: DNA0101() + S1(dna0000) <-> DNA1101() Kon_NG1,Koff_NG1 #Modifiers(DNA0101, DNA1101, S1)
	DNA24: DNA1001() + S1(dna0000) <-> DNA1101() Kon_G1,Koff_G1 #Modifiers(DNA1001, DNA1101, S1)
	DNA25: DNA1100() + S1(dna0000) <-> DNA1101() Kon_NG1,Koff_NG1 #Modifiers(DNA1100, DNA1101, S1)
	DNA26: DNA0110() + S1(dna0000) <-> DNA1110() Kon_NG1,Koff_NG1 #Modifiers(DNA0110, DNA1110, S1)
	DNA27: DNA1010() + S1(dna0000) <-> DNA1110() Kon_G1,Koff_G1 #Modifiers(DNA1010, DNA1110, S1)
	DNA28: DNA1100() + S1(dna0000) <-> DNA1110() Kon_G1,Koff_G1 #Modifiers(DNA1100, DNA1110, S1)
	DNA29: DNA0000(_~0,_2~0,_3~0,s1!946,s1!947,s1!948,s1).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948) + S1(dna0000) <-> DNA0000(_~0,_2~0,_3~0,s1!946,s1!947,s1!948,s1!949).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948).S1(dna0000!949) Kon_NG1,Koff_NG1 #Modifiers(DNA0111, DNA1111, S1)
	DNA30: DNA1011() + S1(dna0000) <-> DNA0000(_~0,_2~0,_3~0,s1!946,s1!947,s1!948,s1!949).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948).S1(dna0000!949) Kon_G1,Koff_G1 #Modifiers(DNA1011, DNA1111, S1)
	DNA31: DNA1101() + S1(dna0000) <-> DNA0000(_~0,_2~0,_3~0,s1!946,s1!947,s1!948,s1!949).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948).S1(dna0000!949) Kon_G1,Koff_G1 #Modifiers(DNA1101, DNA1111, S1)
	DNA32: DNA1110() + S1(dna0000) <-> DNA0000(_~0,_2~0,_3~0,s1!946,s1!947,s1!948,s1!949).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948).S1(dna0000!949) Kon_NG1,Koff_NG1 #Modifiers(DNA1110, DNA1111, S1)
	DNA33: DNA0000(_~0,_2~0,_3~0,s1!946,s1!947,s1,s1).S1(dna0000!946).S1(dna0000!947) <-> DNA0000(_~_,_2~0,_3~0,s1!946,s1!947,s1,s1).S1(dna0000!946).S1(dna0000!947) Kon_P1,Koff_P1 #Modifiers(DNA0011, DNA001_1)
	DNA34: DNA0110() <-> DNA01_10() Kon_P1,Koff_P1 #Modifiers(DNA0110, DNA01_10)
	DNA35: DNA0000(_~0,_2~0,_3~0,s1!946,s1!947,s1!948,s1).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948) <-> DNA0000(_~_,_2~0,_3~0,s1!946,s1!947,s1!948,s1).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948) Kon_P1,Koff_P1 #Modifiers(DNA0111, DNA01_11)
	DNA36: DNA0000(_~0,_2~0,_3~0,s1!946,s1!947,s1!948,s1).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948) <-> DNA011_1() Kon_P1,Koff_P1 #Modifiers(DNA0111, DNA011_1)
	DNA37: DNA0000(_~_,_2~0,_3~0,s1!946,s1!947,s1!948,s1).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948) <-> DNA0000(_~_,_2~_,_3~0,s1!946,s1!947,s1!948,s1).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948) Kon_P1,Koff_P1 #Modifiers(DNA01_11, DNA01_1_1)
	DNA38: DNA011_1() <-> DNA0000(_~_,_2~_,_3~0,s1!946,s1!947,s1!948,s1).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948) Kon_P1,Koff_P1 #Modifiers(DNA011_1, DNA01_1_1)
	DNA39: DNA1100() <-> DNA1_100() Kon_P1,Koff_P1 #Modifiers(DNA1100, DNA1_100)
	DNA40: DNA1101() <-> DNA1_101() Kon_P1,Koff_P1 #Modifiers(DNA1101, DNA1_101)
	DNA41: DNA1110() <-> DNA1_110() Kon_P1,Koff_P1 #Modifiers(DNA1110, DNA1_110)
	DNA42: DNA1110() <-> DNA11_10() Kon_P1,Koff_P1 #Modifiers(DNA1110, DNA11_10)
	DNA43: DNA1_110() <-> DNA1_1_10() Kon_P1,Koff_P1 #Modifiers(DNA1_110, DNA1_1_10)
	DNA44: DNA11_10() <-> DNA1_1_10() Kon_P1,Koff_P1 #Modifiers(DNA11_10, DNA1_1_10)
	DNA45: DNA0000(_~0,_2~0,_3~0,s1!946,s1!947,s1!948,s1!949).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948).S1(dna0000!949) <-> DNA0000(_~_,_2~0,_3~0,s1!946,s1!947,s1!948,s1!949).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948).S1(dna0000!949) Kon_P1,Koff_P1 #Modifiers(DNA1111, DNA1_111)
	DNA46: DNA0000(_~0,_2~0,_3~0,s1!946,s1!947,s1!948,s1!949).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948).S1(dna0000!949) <-> DNA11_11() Kon_P1,Koff_P1 #Modifiers(DNA1111, DNA11_11)
	DNA47: DNA0000(_~0,_2~0,_3~0,s1!946,s1!947,s1!948,s1!949).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948).S1(dna0000!949) <-> DNA111_1() Kon_P1,Koff_P1 #Modifiers(DNA1111, DNA111_1)
	DNA48: DNA0000(_~_,_2~0,_3~0,s1!946,s1!947,s1!948,s1!949).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948).S1(dna0000!949) <-> DNA0000(_~_,_2~_,_3~0,s1!946,s1!947,s1!948,s1!949).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948).S1(dna0000!949) Kon_P1,Koff_P1 #Modifiers(DNA1_111, DNA1_11_1)
	DNA49: DNA111_1() <-> DNA0000(_~_,_2~_,_3~0,s1!946,s1!947,s1!948,s1!949).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948).S1(dna0000!949) Kon_P1,Koff_P1 #Modifiers(DNA111_1, DNA1_11_1)
	DNA50: DNA0000(_~_,_2~0,_3~0,s1!946,s1!947,s1!948,s1!949).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948).S1(dna0000!949) <-> DNA1_1_11() Kon_P1,Koff_P1 #Modifiers(DNA1_111, DNA1_1_11)
	DNA51: DNA11_11() <-> DNA1_1_11() Kon_P1,Koff_P1 #Modifiers(DNA11_11, DNA1_1_11)
	DNA52: DNA11_11() <-> DNA11_1_1() Kon_P1,Koff_P1 #Modifiers(DNA11_11, DNA11_1_1)
	DNA53: DNA111_1() <-> DNA11_1_1() Kon_P1,Koff_P1 #Modifiers(DNA111_1, DNA11_1_1)
	DNA54: DNA1_1_11() <-> DNA0000(_~_,_2~_,_3~_,s1!946,s1!947,s1!948,s1!949).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948).S1(dna0000!949) Kon_P1,Koff_P1 #Modifiers(DNA1_1_11, DNA1_1_1_1)
	DNA55: DNA0000(_~_,_2~_,_3~0,s1!946,s1!947,s1!948,s1!949).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948).S1(dna0000!949) <-> DNA0000(_~_,_2~_,_3~_,s1!946,s1!947,s1!948,s1!949).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948).S1(dna0000!949) Kon_P1,Koff_P1 #Modifiers(DNA1_11_1, DNA1_1_1_1)
	DNA56: DNA11_1_1() <-> DNA0000(_~_,_2~_,_3~_,s1!946,s1!947,s1!948,s1!949).S1(dna0000!946).S1(dna0000!947).S1(dna0000!948).S1(dna0000!949) Kon_P1,Koff_P1 #Modifiers(DNA11_1_1, DNA1_1_1_1)
	DNA57: DNA1011() <-> DNA101_1() Kon_P1,Koff_P1 #Modifiers(DNA1011, DNA101_1)
end reaction rules
end model
