###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000505', 'http://identifiers.org/biomodels.db/MODEL1312040000']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/23966849']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0019395']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/10114']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046']
#@BQB_OCCURS_IN:['http://identifiers.org/go/GO:0005739', 'http://identifiers.org/bto/BTO:0000759']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 54 molecules and 59 reactions. The translated model has 26 molecules and 118 rules'
###
begin model
begin parameters
	Vfcact 0.42 #units:uM_per_min_per_mgProtein
	Vrcact 0.42 #units:uM_per_min_per_mgProtein
	KmcactCarMAT 130.0 #units:uM
	KmcactCarCYT 130.0 #units:uM
	KicactCarCYT 200.0 #units:uM
	Keqcact 1.0 #units:dimensionless
	Vcpt2 0.391 #units:uM_per_min_per_mgProtein
	Kmcpt2C16AcylCarMAT 51.0 #units:uM
	Kmcpt2C14AcylCarMAT 51.0 #units:uM
	Kmcpt2C12AcylCarMAT 51.0 #units:uM
	Kmcpt2C10AcylCarMAT 51.0 #units:uM
	Kmcpt2C8AcylCarMAT 51.0 #units:uM
	Kmcpt2C6AcylCarMAT 51.0 #units:uM
	Kmcpt2C4AcylCarMAT 51.0 #units:uM
	Kmcpt2CoAMAT 30.0 #units:uM
	Kmcpt2C16AcylCoAMAT 38.0 #units:uM
	Kmcpt2C14AcylCoAMAT 38.0 #units:uM
	Kmcpt2C12AcylCoAMAT 38.0 #units:uM
	Kmcpt2C10AcylCoAMAT 38.0 #units:uM
	Kmcpt2C8AcylCoAMAT 38.0 #units:uM
	Kmcpt2C6AcylCoAMAT 1000.0 #units:uM
	Kmcpt2C4AcylCoAMAT 1000000.0 #units:uM
	Kmcpt2CarMAT 350.0 #units:uM
	Keqcpt2 2.22 #units:dimensionless
	Vvlcad 0.008 #units:uM_per_min_per_mgProtein
	KmvlcadC16AcylCoAMAT 6.5 #units:uM
	KmvlcadC14AcylCoAMAT 4.0 #units:uM
	KmvlcadC12AcylCoAMAT 2.7 #units:uM
	KmvlcadFAD 0.12 #units:uM
	KmvlcadC16EnoylCoAMAT 1.08 #units:uM
	KmvlcadC14EnoylCoAMAT 1.08 #units:uM
	KmvlcadC12EnoylCoAMAT 1.08 #units:uM
	KmvlcadFADH 24.2 #units:uM
	Keqvlcad 6.0 #units:dimensionless
	Vlcad 0.01 #units:uM_per_min_per_mgProtein
	KmlcadC16AcylCoAMAT 2.5 #units:uM
	KmlcadC14AcylCoAMAT 7.4 #units:uM
	KmlcadC12AcylCoAMAT 9.0 #units:uM
	KmlcadC10AcylCoAMAT 24.3 #units:uM
	KmlcadC8AcylCoAMAT 123.0 #units:uM
	KmlcadFAD 0.12 #units:uM
	KmlcadC16EnoylCoAMAT 1.08 #units:uM
	KmlcadC14EnoylCoAMAT 1.08 #units:uM
	KmlcadC12EnoylCoAMAT 1.08 #units:uM
	KmlcadC10EnoylCoAMAT 1.08 #units:uM
	KmlcadC8EnoylCoAMAT 1.08 #units:uM
	KmlcadFADH 24.2 #units:uM
	Keqlcad 6.0 #units:dimensionless
	Vmcad 0.081 #units:uM_per_min_per_mgProtein
	KmmcadC12AcylCoAMAT 5.7 #units:uM
	KmmcadC10AcylCoAMAT 5.4 #units:uM
	KmmcadC8AcylCoAMAT 4.0 #units:uM
	KmmcadC6AcylCoAMAT 9.4 #units:uM
	KmmcadC4AcylCoAMAT 135.0 #units:uM
	KmmcadFAD 0.12 #units:uM
	KmmcadC12EnoylCoAMAT 1.08 #units:uM
	KmmcadC10EnoylCoAMAT 1.08 #units:uM
	KmmcadC8EnoylCoAMAT 1.08 #units:uM
	KmmcadC6EnoylCoAMAT 1.08 #units:uM
	KmmcadC4EnoylCoAMAT 1.08 #units:uM
	KmmcadFADH 24.2 #units:uM
	Keqmcad 6.0 #units:dimensionless
	Vscad 0.081 #units:uM_per_min_per_mgProtein
	KmscadC6AcylCoAMAT 285.0 #units:uM
	KmscadC4AcylCoAMAT 10.7 #units:uM
	KmscadFAD 0.12 #units:uM
	KmscadC6EnoylCoAMAT 1.08 #units:uM
	KmscadC4EnoylCoAMAT 1.08 #units:uM
	KmscadFADH 24.2 #units:uM
	Keqscad 6.0 #units:dimensionless
	Vcrot 3.6 #units:uM_per_min_per_mgProtein
	KmcrotC16EnoylCoAMAT 150.0 #units:uM
	KmcrotC14EnoylCoAMAT 100.0 #units:uM
	KmcrotC12EnoylCoAMAT 25.0 #units:uM
	KmcrotC10EnoylCoAMAT 25.0 #units:uM
	KmcrotC8EnoylCoAMAT 25.0 #units:uM
	KmcrotC6EnoylCoAMAT 25.0 #units:uM
	KmcrotC4EnoylCoAMAT 40.0 #units:uM
	KmcrotC16HydroxyacylCoAMAT 45.0 #units:uM
	KmcrotC14HydroxyacylCoAMAT 45.0 #units:uM
	KmcrotC12HydroxyacylCoAMAT 45.0 #units:uM
	KmcrotC10HydroxyacylCoAMAT 45.0 #units:uM
	KmcrotC8HydroxyacylCoAMAT 45.0 #units:uM
	KmcrotC6HydroxyacylCoAMAT 45.0 #units:uM
	KmcrotC4HydroxyacylCoAMAT 45.0 #units:uM
	KicrotC4AcetoacylCoA 1.6 #units:uM
	Keqcrot 3.13 #units:dimensionless
	Vmschad 1.0 #units:uM_per_min_per_mgProtein
	KmmschadC16HydroxyacylCoAMAT 1.5 #units:uM
	KmmschadC14HydroxyacylCoAMAT 1.8 #units:uM
	KmmschadC12HydroxyacylCoAMAT 3.7 #units:uM
	KmmschadC10HydroxyacylCoAMAT 8.8 #units:uM
	KmmschadC8HydroxyacylCoAMAT 16.3 #units:uM
	KmmschadC6HydroxyacylCoAMAT 28.6 #units:uM
	KmmschadC4HydroxyacylCoAMAT 69.9 #units:uM
	KmmschadNADMAT 58.5 #units:uM
	KmmschadC16KetoacylCoAMAT 1.4 #units:uM
	KmmschadC14KetoacylCoAMAT 1.4 #units:uM
	KmmschadC12KetoacylCoAMAT 1.6 #units:uM
	KmmschadC10KetoacylCoAMAT 2.3 #units:uM
	KmmschadC8KetoacylCoAMAT 4.1 #units:uM
	KmmschadC6KetoacylCoAMAT 5.8 #units:uM
	KmmschadC4AcetoacylCoAMAT 16.9 #units:uM
	KmmschadNADHMAT 5.4 #units:uM
	Keqmschad 0.000217 #units:dimensionless
	Vmckat 0.377 #units:uM_per_min_per_mgProtein
	KmmckatC16KetoacylCoAMAT 1.1 #units:uM
	KmmckatC14KetoacylCoAMAT 1.2 #units:uM
	KmmckatC12KetoacylCoAMAT 1.3 #units:uM
	KmmckatC10KetoacylCoAMAT 2.1 #units:uM
	KmmckatC8KetoacylCoAMAT 3.2 #units:uM
	KmmckatC6KetoacylCoAMAT 6.7 #units:uM
	KmmckatC4AcetoacylCoAMAT 12.4 #units:uM
	KmmckatCoAMAT 26.6 #units:uM
	KmmckatC14AcylCoAMAT 13.83 #units:uM
	KmmckatC16AcylCoAMAT 13.83 #units:uM
	KmmckatC12AcylCoAMAT 13.83 #units:uM
	KmmckatC10AcylCoAMAT 13.83 #units:uM
	KmmckatC8AcylCoAMAT 13.83 #units:uM
	KmmckatC6AcylCoAMAT 13.83 #units:uM
	KmmckatC4AcylCoAMAT 13.83 #units:uM
	KmmckatAcetylCoAMAT 30.0 #units:uM
	Keqmckat 1051.0 #units:dimensionless
	Vmtp 2.84 #units:uM_per_min_per_mgProtein
	KmmtpC16EnoylCoAMAT 25.0 #units:uM
	KmmtpC14EnoylCoAMAT 25.0 #units:uM
	KmmtpC12EnoylCoAMAT 25.0 #units:uM
	KmmtpC10EnoylCoAMAT 25.0 #units:uM
	KmmtpC8EnoylCoAMAT 25.0 #units:uM
	KmmtpNADMAT 60.0 #units:uM
	KmmtpCoAMAT 30.0 #units:uM
	KmmtpC14AcylCoAMAT 13.83 #units:uM
	KmmtpC16AcylCoAMAT 13.83 #units:uM
	KmmtpC12AcylCoAMAT 13.83 #units:uM
	KmmtpC10AcylCoAMAT 13.83 #units:uM
	KmmtpC8AcylCoAMAT 13.83 #units:uM
	KmmtpC6AcylCoAMAT 13.83 #units:uM
	KmmtpNADHMAT 50.0 #units:uM
	KmmtpAcetylCoAMAT 30.0 #units:uM
	Keqmtp 0.71 #units:dimensionless
	C16AcylCoACYT_VCYT 33121000000000.0 #original 25.0umol/litre per mgProtein
	C16AcylCoACYT 33121000000000.0 #original 25.0umol/litre per mgProtein
	FADtMAT_VMAT 834649200000.0 #original 0.77umol/litre per mgProtein
	FADtMAT 834649200000.0 #original 0.77umol/litre per mgProtein
	NADtMAT_VMAT 270990000000000.0 #original 250.0umol/litre per mgProtein
	NADtMAT 270990000000000.0 #original 250.0umol/litre per mgProtein
	r1_Keqcpt1 0.450000
	r1_Kicpt1MalCoACYT 9.100000
	r1_Kmcpt1C16AcylCarCYT 136.000000
	r1_Kmcpt1C16AcylCoACYT 13.800000
	r1_Kmcpt1CarCYT 250.000000
	r1_Kmcpt1CoACYT 40.700000
	r1_Vcpt1 0.012000
	r1_ncpt1 2.479900
	r1_sfcpt1C16 1.000000
	r2_KicactC16AcylCarCYT 56.000000
	r2_KmcactC16AcylCarCYT 15.000000
	r2_KmcactC16AcylCarMAT 15.000000
	r3_KicactC14AcylCarCYT 56.000000
	r3_KmcactC14AcylCarCYT 15.000000
	r3_KmcactC14AcylCarMAT 15.000000
	r4_KicactC12AcylCarCYT 56.000000
	r4_KmcactC12AcylCarCYT 15.000000
	r4_KmcactC12AcylCarMAT 15.000000
	r5_KicactC10AcylCarCYT 56.000000
	r5_KmcactC10AcylCarCYT 15.000000
	r5_KmcactC10AcylCarMAT 15.000000
	r6_KicactC8AcylCarCYT 56.000000
	r6_KmcactC8AcylCarCYT 15.000000
	r6_KmcactC8AcylCarMAT 15.000000
	r7_KicactC6AcylCarCYT 56.000000
	r7_KmcactC6AcylCarCYT 15.000000
	r7_KmcactC6AcylCarMAT 15.000000
	r8_KicactC4AcylCarCYT 56.000000
	r8_KmcactC4AcylCarCYT 15.000000
	r8_KmcactC4AcylCarMAT 15.000000
	r9_sfcpt2C16 0.850000
	r10_sfcpt2C14 1.000000
	r11_sfcpt2C12 0.950000
	r12_sfcpt2C10 0.950000
	r13_sfcpt2C8 0.350000
	r14_sfcpt2C6 0.150000
	r15_sfcpt2C4 0.010000
	r16_sfvlcadC16 1.000000
	r17_sfvlcadC14 0.420000
	r18_sfvlcadC12 0.110000
	r19_sflcadC16 0.900000
	r20_sflcadC14 1.000000
	r21_sflcadC12 0.900000
	r22_sflcadC10 0.750000
	r23_sflcadC8 0.400000
	r24_sfmcadC12 0.380000
	r25_sfmcadC10 0.800000
	r26_sfmcadC8 0.870000
	r27_sfmcadC6 1.000000
	r28_sfmcadC4 0.120000
	r29_sfscadC6 0.300000
	r30_sfscadC4 1.000000
	r31_sfcrotC16 0.130000
	r32_sfcrotC14 0.200000
	r33_sfcrotC12 0.250000
	r34_sfcrotC10 0.330000
	r35_sfcrotC8 0.580000
	r36_sfcrotC6 0.830000
	r37_sfcrotC4 1.000000
	r38_sfmschadC16 0.600000
	r39_sfmschadC14 0.500000
	r40_sfmschadC12 0.430000
	r41_sfmschadC10 0.640000
	r42_sfmschadC8 0.890000
	r43_sfmschadC6 1.000000
	r44_sfmschadC4 0.670000
	r45_sfmckatC16 0.000000
	r46_sfmckatC14 0.200000
	r47_sfmckatC12 0.380000
	r48_sfmckatC10 0.650000
	r49_sfmckatC8 0.810000
	r50_sfmckatC6 1.000000
	r51_sfmckatC4 0.490000
	r52_sfmtpC16 1.000000
	r53_sfmtpC14 0.900000
	r54_sfmtpC12 0.810000
	r55_sfmtpC10 0.730000
	r56_sfmtpC8 0.340000
	r57_K1acesink 70.000000
	r57_Ksacesink 6000000.000000
	r58_K1fadhsink 0.460000
	r58_Ksfadhsink 6000000.000000
	r59_K1nadhsink 16.000000
	r59_Ksnadhsink 6000000.000000
end parameters
begin compartments
	#volume units: litre per mgProtein
	VCYT 3 2.2e-06
	VMAT 3 1.8e-06
end compartments
begin molecule types
	#^ bqbiol:isVersionOf chebi:CHEBI:27803
	C12EnoylCoAMAT()
	CoA(CoAMATt~CoAMATt~0,cyt~CYT~0,mat~MAT~0)
	C8AcylC(acetylcoamat,oamat~OAMAT~0)
	#^ bqbiol:isVersionOf chebi:CHEBI:30788
	FADHMAT()
	#^ bqbiol:isVersionOf chebi:CHEBI:61902
	C4HydroxyacylCoAMAT()
	C10AcylC(acetylcoamat,oamat~OAMAT~0)
	#^ bqbiol:isVersionOf chebi:CHEBI:27803
	C16EnoylCoAMAT()
	#^ bqbiol:isVersionOf chebi:CHEBI:61902
	C10HydroxyacylCoAMAT()
	#^ bqbiol:isVersionOf chebi:CHEBI:27803
	C4EnoylCoAMAT()
	C6AcylC(acetylcoamat,oamat~OAMAT~0)
	#^ bqbiol:isVersionOf chebi:CHEBI:16908
	NADHMAT()
	#^ bqbiol:isVersionOf chebi:CHEBI:27803
	C6EnoylCoAMAT()
	Car(C10AcylCar~C10AcylCar~0,C12AcylCar~C12AcylCar~0,C14AcylCar~C14AcylCar~0,C16AcylCar~C16AcylCar~0,C4AcylCar~C4AcylCar~0,C6AcylCar~C6AcylCar~0,C8AcylCar~C8AcylCar~0,cyt~CYT~0,mat~MAT~0)
	#^ bqbiol:isVersionOf chebi:CHEBI:61902
	C16HydroxyacylCoAMAT()
	#^ bqbiol:isVersionOf chebi:CHEBI:61902
	C8HydroxyacylCoAMAT()
	#^ bqbiol:isVersionOf chebi:CHEBI:61902
	C12HydroxyacylCoAMAT()
	#^ bqbiol:isVersionOf chebi:CHEBI:27803
	C8EnoylCoAMAT()
	#^ bqbiol:isVersionOf chebi:CHEBI:61902
	C14HydroxyacylCoAMAT()
	#^ bqbiol:isVersionOf chebi:CHEBI:15351
	AcetylCoAMAT(acetylcoamat,c10acylc,c12acylc,c14acylc,c4acylc,c6acylc,c8acylc)
	#^ bqbiol:isVersionOf chebi:CHEBI:27803
	C10EnoylCoAMAT()
	C4AcylC(acetylcoamat,oamat~OAMAT~0)
	C12AcylC(acetylcoamat,oamat~OAMAT~0)
	#^ bqbiol:isVersionOf chebi:CHEBI:61902
	C6HydroxyacylCoAMAT()
	#^ bqbiol:isVersionOf chebi:CHEBI:27803
	C14EnoylCoAMAT()
	C16AcylC(oamat~OAMAT~0)
	C14AcylC(acetylcoamat,oamat~OAMAT~0)
end molecule types
begin seed species
	@VMAT:AcetylCoAMAT(acetylcoamat,c10acylc,c12acylc,c14acylc,c4acylc,c6acylc,c8acylc) 75877200000000.0 # (70.0 * 1e-06)mol/L * 6.022e23/mol *1.8e-06L #AcetylCoAMAT #AcetylCoAMAT
	@VMAT:FADHMAT() 498621600000.0 #original 0.46umol/litre per mgProtein #FADHMAT #FADHMAT
	@VMAT:NADHMAT() 17343360000000.0 #original 16.0umol/litre per mgProtein #NADHMAT #NADHMAT
	@VMAT:CoA(CoAMATt~0,cyt~0,mat~MAT) -75877200000000.0 #original 4930.0umol/litre per mgProtein #CoAMAT #CoAMAT
	@VCYT:$Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~CYT,mat~0) 264968000000000.0 #original 200.0umol/litre per mgProtein #CarCYT #CarCYT
	@VCYT:$CoA(CoAMATt~0,cyt~CYT,mat~0) 185477600000000.0 #original 140.0umol/litre per mgProtein #CoACYT #CoACYT
	@VMAT:$Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT) 1029762000000000.0 #original 950.0umol/litre per mgProtein #CarMAT #CarMAT
	@VMAT:$CoA(CoAMATt~CoAMATt,cyt~0,mat~0) 5419800000000000.0 #original 5000.0umol/litre per mgProtein #CoAMATt #CoAMATt
end seed species
begin observables
	Species C16AcylCarCYT_VCYT @VCYT:Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~C16AcylCar,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~CYT,mat~0) #C16AcylCarCYT
	Species C16AcylCarMAT_VMAT @VMAT:Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~C16AcylCar,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT) #C16AcylCarMAT
	Species C16AcylCoAMAT_VMAT @VMAT:C16AcylC(oamat~OAMAT) #C16AcylCoAMAT
	Species C16EnoylCoAMAT_VMAT @VMAT:C16EnoylCoAMAT() #C16EnoylCoAMAT
	Species C16HydroxyacylCoAMAT_VMAT @VMAT:C16HydroxyacylCoAMAT() #C16HydroxyacylCoAMAT
	Species C16KetoacylCoAMAT_VMAT @VMAT:AcetylCoAMAT(acetylcoamat,c10acylc,c12acylc,c14acylc!971,c4acylc,c6acylc,c8acylc).C14AcylC(acetylcoamat!971,oamat~OAMAT) #C16KetoacylCoAMAT
	Species C14AcylCarCYT_VCYT @VCYT:Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~C14AcylCar,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~CYT,mat~0) #C14AcylCarCYT
	Species C14AcylCarMAT_VMAT @VMAT:Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~C14AcylCar,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT) #C14AcylCarMAT
	Species C14AcylCoAMAT_VMAT @VMAT:C14AcylC(acetylcoamat,oamat~OAMAT) #C14AcylCoAMAT
	Species C14EnoylCoAMAT_VMAT @VMAT:C14EnoylCoAMAT() #C14EnoylCoAMAT
	Species C14HydroxyacylCoAMAT_VMAT @VMAT:C14HydroxyacylCoAMAT() #C14HydroxyacylCoAMAT
	Species C14KetoacylCoAMAT_VMAT @VMAT:AcetylCoAMAT(acetylcoamat,c10acylc,c12acylc!972,c14acylc,c4acylc,c6acylc,c8acylc).C12AcylC(acetylcoamat!972,oamat~OAMAT) #C14KetoacylCoAMAT
	Species C12AcylCarCYT_VCYT @VCYT:Car(C10AcylCar~0,C12AcylCar~C12AcylCar,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~CYT,mat~0) #C12AcylCarCYT
	Species C12AcylCarMAT_VMAT @VMAT:Car(C10AcylCar~0,C12AcylCar~C12AcylCar,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT) #C12AcylCarMAT
	Species C12AcylCoAMAT_VMAT @VMAT:C12AcylC(acetylcoamat,oamat~OAMAT) #C12AcylCoAMAT
	Species C12EnoylCoAMAT_VMAT @VMAT:C12EnoylCoAMAT() #C12EnoylCoAMAT
	Species C12HydroxyacylCoAMAT_VMAT @VMAT:C12HydroxyacylCoAMAT() #C12HydroxyacylCoAMAT
	Species C12KetoacylCoAMAT_VMAT @VMAT:AcetylCoAMAT(acetylcoamat,c10acylc!973,c12acylc,c14acylc,c4acylc,c6acylc,c8acylc).C10AcylC(acetylcoamat!973,oamat~OAMAT) #C12KetoacylCoAMAT
	Species C10AcylCarCYT_VCYT @VCYT:Car(C10AcylCar~C10AcylCar,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~CYT,mat~0) #C10AcylCarCYT
	Species C10AcylCarMAT_VMAT @VMAT:Car(C10AcylCar~C10AcylCar,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT) #C10AcylCarMAT
	Species C10AcylCoAMAT_VMAT @VMAT:C10AcylC(acetylcoamat,oamat~OAMAT) #C10AcylCoAMAT
	Species C10EnoylCoAMAT_VMAT @VMAT:C10EnoylCoAMAT() #C10EnoylCoAMAT
	Species C10HydroxyacylCoAMAT_VMAT @VMAT:C10HydroxyacylCoAMAT() #C10HydroxyacylCoAMAT
	Species C10KetoacylCoAMAT_VMAT @VMAT:AcetylCoAMAT(acetylcoamat,c10acylc,c12acylc,c14acylc,c4acylc,c6acylc,c8acylc!974).C8AcylC(acetylcoamat!974,oamat~OAMAT) #C10KetoacylCoAMAT
	Species C8AcylCarCYT_VCYT @VCYT:Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~C8AcylCar,cyt~CYT,mat~0) #C8AcylCarCYT
	Species C8AcylCarMAT_VMAT @VMAT:Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~C8AcylCar,cyt~0,mat~MAT) #C8AcylCarMAT
	Species C8AcylCoAMAT_VMAT @VMAT:C8AcylC(acetylcoamat,oamat~OAMAT) #C8AcylCoAMAT
	Species C8EnoylCoAMAT_VMAT @VMAT:C8EnoylCoAMAT() #C8EnoylCoAMAT
	Species C8HydroxyacylCoAMAT_VMAT @VMAT:C8HydroxyacylCoAMAT() #C8HydroxyacylCoAMAT
	Species C8KetoacylCoAMAT_VMAT @VMAT:AcetylCoAMAT(acetylcoamat,c10acylc,c12acylc,c14acylc,c4acylc,c6acylc!969,c8acylc).C6AcylC(acetylcoamat!969,oamat~OAMAT) #C8KetoacylCoAMAT
	Species C6AcylCarCYT_VCYT @VCYT:Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~C6AcylCar,C8AcylCar~0,cyt~CYT,mat~0) #C6AcylCarCYT
	Species C6AcylCarMAT_VMAT @VMAT:Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~C6AcylCar,C8AcylCar~0,cyt~0,mat~MAT) #C6AcylCarMAT
	Species C6AcylCoAMAT_VMAT @VMAT:C6AcylC(acetylcoamat,oamat~OAMAT) #C6AcylCoAMAT
	Species C6EnoylCoAMAT_VMAT @VMAT:C6EnoylCoAMAT() #C6EnoylCoAMAT
	Species C6HydroxyacylCoAMAT_VMAT @VMAT:C6HydroxyacylCoAMAT() #C6HydroxyacylCoAMAT
	Species C6KetoacylCoAMAT_VMAT @VMAT:AcetylCoAMAT(acetylcoamat,c10acylc,c12acylc,c14acylc,c4acylc!970,c6acylc,c8acylc).C4AcylC(acetylcoamat!970,oamat~OAMAT) #C6KetoacylCoAMAT
	Species C4AcylCarCYT_VCYT @VCYT:Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~C4AcylCar,C6AcylCar~0,C8AcylCar~0,cyt~CYT,mat~0) #C4AcylCarCYT
	Species C4AcylCarMAT_VMAT @VMAT:Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~C4AcylCar,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT) #C4AcylCarMAT
	Species C4AcylCoAMAT_VMAT @VMAT:C4AcylC(acetylcoamat,oamat~OAMAT) #C4AcylCoAMAT
	Species C4EnoylCoAMAT_VMAT @VMAT:C4EnoylCoAMAT() #C4EnoylCoAMAT
	Species C4HydroxyacylCoAMAT_VMAT @VMAT:C4HydroxyacylCoAMAT() #C4HydroxyacylCoAMAT
	Species C4AcetoacylCoAMAT_VMAT @VMAT:AcetylCoAMAT(acetylcoamat!968,c10acylc,c12acylc,c14acylc,c4acylc,c6acylc,c8acylc).AcetylCoAMAT(acetylcoamat!968,c10acylc,c12acylc,c14acylc,c4acylc,c6acylc,c8acylc) #C4AcetoacylCoAMAT
	Species AcetylCoAMAT_VMAT @VMAT:AcetylCoAMAT(acetylcoamat,c10acylc,c12acylc,c14acylc,c4acylc,c6acylc,c8acylc) #AcetylCoAMAT
	Species FADHMAT_VMAT @VMAT:FADHMAT() #FADHMAT
	Species NADHMAT_VMAT @VMAT:NADHMAT() #NADHMAT
	Species CoAMAT_VMAT @VMAT:CoA(CoAMATt~0,cyt~0,mat~MAT) #CoAMAT
	Species CarCYT_VCYT @VCYT:Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~CYT,mat~0) #CarCYT
	Species CoACYT_VCYT @VCYT:CoA(CoAMATt~0,cyt~CYT,mat~0) #CoACYT
	Species CarMAT_VMAT @VMAT:Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT) #CarMAT
	Species CoAMATt_VMAT @VMAT:CoA(CoAMATt~CoAMATt,cyt~0,mat~0) #CoAMATt
end observables
begin functions
	CoAMAT_ar() = -AcetylCoAMAT_VMAT - C10AcylCoAMAT_VMAT - C10EnoylCoAMAT_VMAT - C10HydroxyacylCoAMAT_VMAT - C10KetoacylCoAMAT_VMAT - C12AcylCoAMAT_VMAT - C12EnoylCoAMAT_VMAT - C12HydroxyacylCoAMAT_VMAT - C12KetoacylCoAMAT_VMAT - C14AcylCoAMAT_VMAT - C14EnoylCoAMAT_VMAT - C14HydroxyacylCoAMAT_VMAT - C14KetoacylCoAMAT_VMAT - C16AcylCoAMAT_VMAT - C16EnoylCoAMAT_VMAT - C16HydroxyacylCoAMAT_VMAT - C16KetoacylCoAMAT_VMAT - C4AcetoacylCoAMAT_VMAT - C4AcylCoAMAT_VMAT - C4EnoylCoAMAT_VMAT - C4HydroxyacylCoAMAT_VMAT - C6AcylCoAMAT_VMAT - C6EnoylCoAMAT_VMAT - C6HydroxyacylCoAMAT_VMAT - C6KetoacylCoAMAT_VMAT - C8AcylCoAMAT_VMAT - C8EnoylCoAMAT_VMAT - C8HydroxyacylCoAMAT_VMAT - C8KetoacylCoAMAT_VMAT + CoAMATt_VMAT
	fRate0() = 66.4224*C16AcylCoACYT_VCYT*CarCYT_VCYT/(3450.0*C16AcylCarCYT_VCYT*CoACYT_VCYT + 561.66*C16AcylCarCYT_VCYT*(CarCYT_VCYT + 250.0) + 5535.2*C16AcylCoACYT_VCYT*CarCYT_VCYT + 1383800.0*C16AcylCoACYT_VCYT + 319.658056892516*CarCYT_VCYT*MalCoACYT_VCYT^2.4799 + 76385.76*CarCYT_VCYT + 34000.0*CoACYT_VCYT*(C16AcylCoACYT_VCYT + 0.0577500464107016*MalCoACYT_VCYT^2.4799 + 13.8) + 79914.5142231289*MalCoACYT_VCYT^2.4799 + 19096440.0)
	fRate0m() = 66.4224*CoACYT_VCYT/(1552.5*C16AcylCarCYT_VCYT*CoACYT_VCYT + 252.747*C16AcylCarCYT_VCYT*(CarCYT_VCYT + 250.0) + 2490.84*C16AcylCoACYT_VCYT*CarCYT_VCYT + 622710.0*C16AcylCoACYT_VCYT + 143.846125601632*CarCYT_VCYT*MalCoACYT_VCYT^2.4799 + 34373.592*CarCYT_VCYT + 15300.0*CoACYT_VCYT*(C16AcylCoACYT_VCYT + 0.0577500464107016*MalCoACYT_VCYT^2.4799 + 13.8) + 35961.531400408*MalCoACYT_VCYT^2.4799 + 8593398.0)
	fRate1() = 56.0*CarMAT_VMAT*Keqcact*KicactCarCYT*Vfcact*Vrcact/(C16AcylCarCYT_VCYT*C16AcylCarMAT_VMAT*KicactCarCYT*KmcactCarCYT*Vfcact + 840.0*CarCYT_VCYT*CarMAT_VMAT*Keqcact*Vrcact + 56.0*Keqcact*KicactCarCYT*Vrcact*(C16AcylCarCYT_VCYT*CarMAT_VMAT + C16AcylCarCYT_VCYT*KmcactCarMAT + 15.0*CarMAT_VMAT) + 56.0*KicactCarCYT*Vfcact*(C16AcylCarMAT_VMAT*CarCYT_VCYT + C16AcylCarMAT_VMAT*KmcactCarCYT + 15.0*CarCYT_VCYT))
	fRate1m() = 56.0*CarCYT_VCYT*KicactCarCYT*Vfcact*Vrcact/(C16AcylCarCYT_VCYT*C16AcylCarMAT_VMAT*KicactCarCYT*KmcactCarCYT*Vfcact + 840.0*CarCYT_VCYT*CarMAT_VMAT*Keqcact*Vrcact + 56.0*Keqcact*KicactCarCYT*Vrcact*(C16AcylCarCYT_VCYT*CarMAT_VMAT + C16AcylCarCYT_VCYT*KmcactCarMAT + 15.0*CarMAT_VMAT) + 56.0*KicactCarCYT*Vfcact*(C16AcylCarMAT_VMAT*CarCYT_VCYT + C16AcylCarMAT_VMAT*KmcactCarCYT + 15.0*CarCYT_VCYT))
	fRate2() = 56.0*CarMAT_VMAT*Keqcact*KicactCarCYT*Vfcact*Vrcact/(C14AcylCarCYT_VCYT*C14AcylCarMAT_VMAT*KicactCarCYT*KmcactCarCYT*Vfcact + 840.0*CarCYT_VCYT*CarMAT_VMAT*Keqcact*Vrcact + 56.0*Keqcact*KicactCarCYT*Vrcact*(C14AcylCarCYT_VCYT*CarMAT_VMAT + C14AcylCarCYT_VCYT*KmcactCarMAT + 15.0*CarMAT_VMAT) + 56.0*KicactCarCYT*Vfcact*(C14AcylCarMAT_VMAT*CarCYT_VCYT + C14AcylCarMAT_VMAT*KmcactCarCYT + 15.0*CarCYT_VCYT))
	fRate2m() = 56.0*CarCYT_VCYT*KicactCarCYT*Vfcact*Vrcact/(C14AcylCarCYT_VCYT*C14AcylCarMAT_VMAT*KicactCarCYT*KmcactCarCYT*Vfcact + 840.0*CarCYT_VCYT*CarMAT_VMAT*Keqcact*Vrcact + 56.0*Keqcact*KicactCarCYT*Vrcact*(C14AcylCarCYT_VCYT*CarMAT_VMAT + C14AcylCarCYT_VCYT*KmcactCarMAT + 15.0*CarMAT_VMAT) + 56.0*KicactCarCYT*Vfcact*(C14AcylCarMAT_VMAT*CarCYT_VCYT + C14AcylCarMAT_VMAT*KmcactCarCYT + 15.0*CarCYT_VCYT))
	fRate3() = 56.0*CarMAT_VMAT*Keqcact*KicactCarCYT*Vfcact*Vrcact/(C12AcylCarCYT_VCYT*C12AcylCarMAT_VMAT*KicactCarCYT*KmcactCarCYT*Vfcact + 840.0*CarCYT_VCYT*CarMAT_VMAT*Keqcact*Vrcact + 56.0*Keqcact*KicactCarCYT*Vrcact*(C12AcylCarCYT_VCYT*CarMAT_VMAT + C12AcylCarCYT_VCYT*KmcactCarMAT + 15.0*CarMAT_VMAT) + 56.0*KicactCarCYT*Vfcact*(C12AcylCarMAT_VMAT*CarCYT_VCYT + C12AcylCarMAT_VMAT*KmcactCarCYT + 15.0*CarCYT_VCYT))
	fRate3m() = 56.0*CarCYT_VCYT*KicactCarCYT*Vfcact*Vrcact/(C12AcylCarCYT_VCYT*C12AcylCarMAT_VMAT*KicactCarCYT*KmcactCarCYT*Vfcact + 840.0*CarCYT_VCYT*CarMAT_VMAT*Keqcact*Vrcact + 56.0*Keqcact*KicactCarCYT*Vrcact*(C12AcylCarCYT_VCYT*CarMAT_VMAT + C12AcylCarCYT_VCYT*KmcactCarMAT + 15.0*CarMAT_VMAT) + 56.0*KicactCarCYT*Vfcact*(C12AcylCarMAT_VMAT*CarCYT_VCYT + C12AcylCarMAT_VMAT*KmcactCarCYT + 15.0*CarCYT_VCYT))
	fRate4() = 56.0*CarMAT_VMAT*Keqcact*KicactCarCYT*Vfcact*Vrcact/(C10AcylCarCYT_VCYT*C10AcylCarMAT_VMAT*KicactCarCYT*KmcactCarCYT*Vfcact + 840.0*CarCYT_VCYT*CarMAT_VMAT*Keqcact*Vrcact + 56.0*Keqcact*KicactCarCYT*Vrcact*(C10AcylCarCYT_VCYT*CarMAT_VMAT + C10AcylCarCYT_VCYT*KmcactCarMAT + 15.0*CarMAT_VMAT) + 56.0*KicactCarCYT*Vfcact*(C10AcylCarMAT_VMAT*CarCYT_VCYT + C10AcylCarMAT_VMAT*KmcactCarCYT + 15.0*CarCYT_VCYT))
	fRate4m() = 56.0*CarCYT_VCYT*KicactCarCYT*Vfcact*Vrcact/(C10AcylCarCYT_VCYT*C10AcylCarMAT_VMAT*KicactCarCYT*KmcactCarCYT*Vfcact + 840.0*CarCYT_VCYT*CarMAT_VMAT*Keqcact*Vrcact + 56.0*Keqcact*KicactCarCYT*Vrcact*(C10AcylCarCYT_VCYT*CarMAT_VMAT + C10AcylCarCYT_VCYT*KmcactCarMAT + 15.0*CarMAT_VMAT) + 56.0*KicactCarCYT*Vfcact*(C10AcylCarMAT_VMAT*CarCYT_VCYT + C10AcylCarMAT_VMAT*KmcactCarCYT + 15.0*CarCYT_VCYT))
	fRate5() = 56.0*CarMAT_VMAT*Keqcact*KicactCarCYT*Vfcact*Vrcact/(C8AcylCarCYT_VCYT*C8AcylCarMAT_VMAT*KicactCarCYT*KmcactCarCYT*Vfcact + 840.0*CarCYT_VCYT*CarMAT_VMAT*Keqcact*Vrcact + 56.0*Keqcact*KicactCarCYT*Vrcact*(C8AcylCarCYT_VCYT*CarMAT_VMAT + C8AcylCarCYT_VCYT*KmcactCarMAT + 15.0*CarMAT_VMAT) + 56.0*KicactCarCYT*Vfcact*(C8AcylCarMAT_VMAT*CarCYT_VCYT + C8AcylCarMAT_VMAT*KmcactCarCYT + 15.0*CarCYT_VCYT))
	fRate5m() = 56.0*CarCYT_VCYT*KicactCarCYT*Vfcact*Vrcact/(C8AcylCarCYT_VCYT*C8AcylCarMAT_VMAT*KicactCarCYT*KmcactCarCYT*Vfcact + 840.0*CarCYT_VCYT*CarMAT_VMAT*Keqcact*Vrcact + 56.0*Keqcact*KicactCarCYT*Vrcact*(C8AcylCarCYT_VCYT*CarMAT_VMAT + C8AcylCarCYT_VCYT*KmcactCarMAT + 15.0*CarMAT_VMAT) + 56.0*KicactCarCYT*Vfcact*(C8AcylCarMAT_VMAT*CarCYT_VCYT + C8AcylCarMAT_VMAT*KmcactCarCYT + 15.0*CarCYT_VCYT))
	fRate6() = 56.0*CarMAT_VMAT*Keqcact*KicactCarCYT*Vfcact*Vrcact/(C6AcylCarCYT_VCYT*C6AcylCarMAT_VMAT*KicactCarCYT*KmcactCarCYT*Vfcact + 840.0*CarCYT_VCYT*CarMAT_VMAT*Keqcact*Vrcact + 56.0*Keqcact*KicactCarCYT*Vrcact*(C6AcylCarCYT_VCYT*CarMAT_VMAT + C6AcylCarCYT_VCYT*KmcactCarMAT + 15.0*CarMAT_VMAT) + 56.0*KicactCarCYT*Vfcact*(C6AcylCarMAT_VMAT*CarCYT_VCYT + C6AcylCarMAT_VMAT*KmcactCarCYT + 15.0*CarCYT_VCYT))
	fRate6m() = 56.0*CarCYT_VCYT*KicactCarCYT*Vfcact*Vrcact/(C6AcylCarCYT_VCYT*C6AcylCarMAT_VMAT*KicactCarCYT*KmcactCarCYT*Vfcact + 840.0*CarCYT_VCYT*CarMAT_VMAT*Keqcact*Vrcact + 56.0*Keqcact*KicactCarCYT*Vrcact*(C6AcylCarCYT_VCYT*CarMAT_VMAT + C6AcylCarCYT_VCYT*KmcactCarMAT + 15.0*CarMAT_VMAT) + 56.0*KicactCarCYT*Vfcact*(C6AcylCarMAT_VMAT*CarCYT_VCYT + C6AcylCarMAT_VMAT*KmcactCarCYT + 15.0*CarCYT_VCYT))
	fRate7() = 56.0*CarMAT_VMAT*Keqcact*KicactCarCYT*Vfcact*Vrcact/(C4AcylCarCYT_VCYT*C4AcylCarMAT_VMAT*KicactCarCYT*KmcactCarCYT*Vfcact + 840.0*CarCYT_VCYT*CarMAT_VMAT*Keqcact*Vrcact + 56.0*Keqcact*KicactCarCYT*Vrcact*(C4AcylCarCYT_VCYT*CarMAT_VMAT + C4AcylCarCYT_VCYT*KmcactCarMAT + 15.0*CarMAT_VMAT) + 56.0*KicactCarCYT*Vfcact*(C4AcylCarMAT_VMAT*CarCYT_VCYT + C4AcylCarMAT_VMAT*KmcactCarCYT + 15.0*CarCYT_VCYT))
	fRate7m() = 56.0*CarCYT_VCYT*KicactCarCYT*Vfcact*Vrcact/(C4AcylCarCYT_VCYT*C4AcylCarMAT_VMAT*KicactCarCYT*KmcactCarCYT*Vfcact + 840.0*CarCYT_VCYT*CarMAT_VMAT*Keqcact*Vrcact + 56.0*Keqcact*KicactCarCYT*Vrcact*(C4AcylCarCYT_VCYT*CarMAT_VMAT + C4AcylCarCYT_VCYT*KmcactCarMAT + 15.0*CarMAT_VMAT) + 56.0*KicactCarCYT*Vfcact*(C4AcylCarMAT_VMAT*CarCYT_VCYT + C4AcylCarMAT_VMAT*KmcactCarCYT + 15.0*CarCYT_VCYT))
	fRate8() = 0.85*CoAMAT_VMAT*Vcpt2/(C10AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCarMAT*Kmcpt2CarMAT) + C10AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C16AcylCarMAT/Kmcpt2C10AcylCarMAT + C10AcylCarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCarMAT + C10AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCoAMAT*Kmcpt2CarMAT) + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C16AcylCarMAT/Kmcpt2C10AcylCoAMAT + C10AcylCoAMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCoAMAT + C12AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCarMAT*Kmcpt2CarMAT) + C12AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C16AcylCarMAT/Kmcpt2C12AcylCarMAT + C12AcylCarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCarMAT + C12AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCoAMAT*Kmcpt2CarMAT) + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C16AcylCarMAT/Kmcpt2C12AcylCoAMAT + C12AcylCoAMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCoAMAT + C14AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCarMAT*Kmcpt2CarMAT) + C14AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C16AcylCarMAT/Kmcpt2C14AcylCarMAT + C14AcylCarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCarMAT + C14AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCoAMAT*Kmcpt2CarMAT) + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C16AcylCarMAT/Kmcpt2C14AcylCoAMAT + C14AcylCoAMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCoAMAT + C16AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + C16AcylCarMAT_VMAT*CoAMAT_VMAT + C16AcylCarMAT_VMAT*Kmcpt2CoAMAT + C16AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCoAMAT*Kmcpt2CarMAT) + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C16AcylCarMAT/Kmcpt2C16AcylCoAMAT + C16AcylCoAMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCoAMAT + C4AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCarMAT*Kmcpt2CarMAT) + C4AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C16AcylCarMAT/Kmcpt2C4AcylCarMAT + C4AcylCarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCarMAT + C4AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCoAMAT*Kmcpt2CarMAT) + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C16AcylCarMAT/Kmcpt2C4AcylCoAMAT + C4AcylCoAMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCoAMAT + C6AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCarMAT*Kmcpt2CarMAT) + C6AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C16AcylCarMAT/Kmcpt2C6AcylCarMAT + C6AcylCarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCarMAT + C6AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCoAMAT*Kmcpt2CarMAT) + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C16AcylCarMAT/Kmcpt2C6AcylCoAMAT + C6AcylCoAMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCoAMAT + C8AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCarMAT*Kmcpt2CarMAT) + C8AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C16AcylCarMAT/Kmcpt2C8AcylCarMAT + C8AcylCarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCarMAT + C8AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCoAMAT*Kmcpt2CarMAT) + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C16AcylCarMAT/Kmcpt2C8AcylCoAMAT + C8AcylCoAMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCoAMAT + CarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + CoAMAT_VMAT*Kmcpt2C16AcylCarMAT + Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT)
	fRate8m() = 0.85*CarMAT_VMAT*Vcpt2/(C10AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCarMAT*Kmcpt2CarMAT) + C10AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT/Kmcpt2C10AcylCarMAT + C10AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCarMAT + C10AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCoAMAT*Kmcpt2CarMAT) + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT/Kmcpt2C10AcylCoAMAT + C10AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCoAMAT + C12AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCarMAT*Kmcpt2CarMAT) + C12AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT/Kmcpt2C12AcylCarMAT + C12AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCarMAT + C12AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCoAMAT*Kmcpt2CarMAT) + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT/Kmcpt2C12AcylCoAMAT + C12AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCoAMAT + C14AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCarMAT*Kmcpt2CarMAT) + C14AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT/Kmcpt2C14AcylCarMAT + C14AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCarMAT + C14AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCoAMAT*Kmcpt2CarMAT) + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT/Kmcpt2C14AcylCoAMAT + C14AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCoAMAT + C16AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2CoAMAT/Kmcpt2CarMAT + C16AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2 + C16AcylCarMAT_VMAT*Keqcpt2*Kmcpt2CoAMAT + C16AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCoAMAT*Kmcpt2CarMAT) + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT/Kmcpt2C16AcylCoAMAT + C16AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCoAMAT + C4AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCarMAT*Kmcpt2CarMAT) + C4AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT/Kmcpt2C4AcylCarMAT + C4AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCarMAT + C4AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCoAMAT*Kmcpt2CarMAT) + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT/Kmcpt2C4AcylCoAMAT + C4AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCoAMAT + C6AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCarMAT*Kmcpt2CarMAT) + C6AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT/Kmcpt2C6AcylCarMAT + C6AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCarMAT + C6AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCoAMAT*Kmcpt2CarMAT) + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT/Kmcpt2C6AcylCoAMAT + C6AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCoAMAT + C8AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCarMAT*Kmcpt2CarMAT) + C8AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT/Kmcpt2C8AcylCarMAT + C8AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCarMAT + C8AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCoAMAT*Kmcpt2CarMAT) + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT/Kmcpt2C8AcylCoAMAT + C8AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCoAMAT + CarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + CoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT + Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT)
	fRate9() = 1.0*CoAMAT_VMAT*Vcpt2/(C10AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCarMAT*Kmcpt2CarMAT) + C10AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C14AcylCarMAT/Kmcpt2C10AcylCarMAT + C10AcylCarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCarMAT + C10AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCoAMAT*Kmcpt2CarMAT) + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C14AcylCarMAT/Kmcpt2C10AcylCoAMAT + C10AcylCoAMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCoAMAT + C12AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCarMAT*Kmcpt2CarMAT) + C12AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C14AcylCarMAT/Kmcpt2C12AcylCarMAT + C12AcylCarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCarMAT + C12AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCoAMAT*Kmcpt2CarMAT) + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C14AcylCarMAT/Kmcpt2C12AcylCoAMAT + C12AcylCoAMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCoAMAT + C14AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + C14AcylCarMAT_VMAT*CoAMAT_VMAT + C14AcylCarMAT_VMAT*Kmcpt2CoAMAT + C14AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCoAMAT*Kmcpt2CarMAT) + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C14AcylCarMAT/Kmcpt2C14AcylCoAMAT + C14AcylCoAMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCoAMAT + C16AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCarMAT*Kmcpt2CarMAT) + C16AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C14AcylCarMAT/Kmcpt2C16AcylCarMAT + C16AcylCarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCarMAT + C16AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCoAMAT*Kmcpt2CarMAT) + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C14AcylCarMAT/Kmcpt2C16AcylCoAMAT + C16AcylCoAMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCoAMAT + C4AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCoAMAT*Kmcpt2CarMAT) + C4AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C14AcylCarMAT/Kmcpt2C4AcylCoAMAT + C4AcylCarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCoAMAT + C4AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCoAMAT*Kmcpt2CarMAT) + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C14AcylCarMAT/Kmcpt2C4AcylCoAMAT + C4AcylCoAMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCoAMAT + C6AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCarMAT*Kmcpt2CarMAT) + C6AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C14AcylCarMAT/Kmcpt2C6AcylCarMAT + C6AcylCarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCarMAT + C6AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCoAMAT*Kmcpt2CarMAT) + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C14AcylCarMAT/Kmcpt2C6AcylCoAMAT + C6AcylCoAMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCoAMAT + C8AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCarMAT*Kmcpt2CarMAT) + C8AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C14AcylCarMAT/Kmcpt2C8AcylCarMAT + C8AcylCarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCarMAT + C8AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCoAMAT*Kmcpt2CarMAT) + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C14AcylCarMAT/Kmcpt2C8AcylCoAMAT + C8AcylCoAMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCoAMAT + CarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + CoAMAT_VMAT*Kmcpt2C14AcylCarMAT + Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT)
	fRate9m() = 1.0*CarMAT_VMAT*Vcpt2/(C10AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCarMAT*Kmcpt2CarMAT) + C10AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT/Kmcpt2C10AcylCarMAT + C10AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCarMAT + C10AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCoAMAT*Kmcpt2CarMAT) + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT/Kmcpt2C10AcylCoAMAT + C10AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCoAMAT + C12AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCarMAT*Kmcpt2CarMAT) + C12AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT/Kmcpt2C12AcylCarMAT + C12AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCarMAT + C12AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCoAMAT*Kmcpt2CarMAT) + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT/Kmcpt2C12AcylCoAMAT + C12AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCoAMAT + C14AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2CoAMAT/Kmcpt2CarMAT + C14AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2 + C14AcylCarMAT_VMAT*Keqcpt2*Kmcpt2CoAMAT + C14AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCoAMAT*Kmcpt2CarMAT) + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT/Kmcpt2C14AcylCoAMAT + C14AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCoAMAT + C16AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCarMAT*Kmcpt2CarMAT) + C16AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT/Kmcpt2C16AcylCarMAT + C16AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCarMAT + C16AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCoAMAT*Kmcpt2CarMAT) + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT/Kmcpt2C16AcylCoAMAT + C16AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCoAMAT + C4AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCoAMAT*Kmcpt2CarMAT) + C4AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT/Kmcpt2C4AcylCoAMAT + C4AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCoAMAT + C4AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCoAMAT*Kmcpt2CarMAT) + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT/Kmcpt2C4AcylCoAMAT + C4AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCoAMAT + C6AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCarMAT*Kmcpt2CarMAT) + C6AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT/Kmcpt2C6AcylCarMAT + C6AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCarMAT + C6AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCoAMAT*Kmcpt2CarMAT) + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT/Kmcpt2C6AcylCoAMAT + C6AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCoAMAT + C8AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCarMAT*Kmcpt2CarMAT) + C8AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT/Kmcpt2C8AcylCarMAT + C8AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCarMAT + C8AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCoAMAT*Kmcpt2CarMAT) + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT/Kmcpt2C8AcylCoAMAT + C8AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCoAMAT + CarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + CoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT + Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT)
	fRate10() = 0.95*CoAMAT_VMAT*Vcpt2/(C10AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCarMAT*Kmcpt2CarMAT) + C10AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C12AcylCarMAT/Kmcpt2C10AcylCarMAT + C10AcylCarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCarMAT + C10AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCoAMAT*Kmcpt2CarMAT) + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C12AcylCarMAT/Kmcpt2C10AcylCoAMAT + C10AcylCoAMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCoAMAT + C12AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + C12AcylCarMAT_VMAT*CoAMAT_VMAT + C12AcylCarMAT_VMAT*Kmcpt2CoAMAT + C12AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCoAMAT*Kmcpt2CarMAT) + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C12AcylCarMAT/Kmcpt2C12AcylCoAMAT + C12AcylCoAMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCoAMAT + C14AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCarMAT*Kmcpt2CarMAT) + C14AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C12AcylCarMAT/Kmcpt2C14AcylCarMAT + C14AcylCarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCarMAT + C14AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCoAMAT*Kmcpt2CarMAT) + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C12AcylCarMAT/Kmcpt2C14AcylCoAMAT + C14AcylCoAMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCoAMAT + C16AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCarMAT*Kmcpt2CarMAT) + C16AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C12AcylCarMAT/Kmcpt2C16AcylCarMAT + C16AcylCarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCarMAT + C16AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCoAMAT*Kmcpt2CarMAT) + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C12AcylCarMAT/Kmcpt2C16AcylCoAMAT + C16AcylCoAMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCoAMAT + C4AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCarMAT*Kmcpt2CarMAT) + C4AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C12AcylCarMAT/Kmcpt2C4AcylCarMAT + C4AcylCarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCarMAT + C4AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCoAMAT*Kmcpt2CarMAT) + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C12AcylCarMAT/Kmcpt2C4AcylCoAMAT + C4AcylCoAMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCoAMAT + C6AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCarMAT*Kmcpt2CarMAT) + C6AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C12AcylCarMAT/Kmcpt2C6AcylCarMAT + C6AcylCarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCarMAT + C6AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCoAMAT*Kmcpt2CarMAT) + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C12AcylCarMAT/Kmcpt2C6AcylCoAMAT + C6AcylCoAMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCoAMAT + C8AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCarMAT*Kmcpt2CarMAT) + C8AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C12AcylCarMAT/Kmcpt2C8AcylCarMAT + C8AcylCarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCarMAT + C8AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCoAMAT*Kmcpt2CarMAT) + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C12AcylCarMAT/Kmcpt2C8AcylCoAMAT + C8AcylCoAMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCoAMAT + CarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + CoAMAT_VMAT*Kmcpt2C12AcylCarMAT + Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT)
	fRate10m() = 0.95*CarMAT_VMAT*Vcpt2/(C10AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCarMAT*Kmcpt2CarMAT) + C10AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT/Kmcpt2C10AcylCarMAT + C10AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCarMAT + C10AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCoAMAT*Kmcpt2CarMAT) + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT/Kmcpt2C10AcylCoAMAT + C10AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCoAMAT + C12AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2CoAMAT/Kmcpt2CarMAT + C12AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2 + C12AcylCarMAT_VMAT*Keqcpt2*Kmcpt2CoAMAT + C12AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCoAMAT*Kmcpt2CarMAT) + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT/Kmcpt2C12AcylCoAMAT + C12AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCoAMAT + C14AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCarMAT*Kmcpt2CarMAT) + C14AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT/Kmcpt2C14AcylCarMAT + C14AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCarMAT + C14AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCoAMAT*Kmcpt2CarMAT) + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT/Kmcpt2C14AcylCoAMAT + C14AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCoAMAT + C16AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCarMAT*Kmcpt2CarMAT) + C16AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT/Kmcpt2C16AcylCarMAT + C16AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCarMAT + C16AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCoAMAT*Kmcpt2CarMAT) + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT/Kmcpt2C16AcylCoAMAT + C16AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCoAMAT + C4AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCarMAT*Kmcpt2CarMAT) + C4AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT/Kmcpt2C4AcylCarMAT + C4AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCarMAT + C4AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCoAMAT*Kmcpt2CarMAT) + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT/Kmcpt2C4AcylCoAMAT + C4AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCoAMAT + C6AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCarMAT*Kmcpt2CarMAT) + C6AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT/Kmcpt2C6AcylCarMAT + C6AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCarMAT + C6AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCoAMAT*Kmcpt2CarMAT) + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT/Kmcpt2C6AcylCoAMAT + C6AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCoAMAT + C8AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCarMAT*Kmcpt2CarMAT) + C8AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT/Kmcpt2C8AcylCarMAT + C8AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCarMAT + C8AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCoAMAT*Kmcpt2CarMAT) + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT/Kmcpt2C8AcylCoAMAT + C8AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCoAMAT + CarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + CoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT + Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT)
	fRate11() = 0.95*CoAMAT_VMAT*Vcpt2/(C10AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + C10AcylCarMAT_VMAT*CoAMAT_VMAT + C10AcylCarMAT_VMAT*Kmcpt2CoAMAT + C10AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCoAMAT*Kmcpt2CarMAT) + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C10AcylCarMAT/Kmcpt2C10AcylCoAMAT + C10AcylCoAMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCoAMAT + C12AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCarMAT*Kmcpt2CarMAT) + C12AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C10AcylCarMAT/Kmcpt2C12AcylCarMAT + C12AcylCarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCarMAT + C12AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCoAMAT*Kmcpt2CarMAT) + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C10AcylCarMAT/Kmcpt2C12AcylCoAMAT + C12AcylCoAMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCoAMAT + C14AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCarMAT*Kmcpt2CarMAT) + C14AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C10AcylCarMAT/Kmcpt2C14AcylCarMAT + C14AcylCarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCarMAT + C14AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCoAMAT*Kmcpt2CarMAT) + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C10AcylCarMAT/Kmcpt2C14AcylCoAMAT + C14AcylCoAMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCoAMAT + C16AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCarMAT*Kmcpt2CarMAT) + C16AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C10AcylCarMAT/Kmcpt2C16AcylCarMAT + C16AcylCarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCarMAT + C16AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCoAMAT*Kmcpt2CarMAT) + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C10AcylCarMAT/Kmcpt2C16AcylCoAMAT + C16AcylCoAMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCoAMAT + C4AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCarMAT*Kmcpt2CarMAT) + C4AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C10AcylCarMAT/Kmcpt2C4AcylCarMAT + C4AcylCarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCarMAT + C4AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCoAMAT*Kmcpt2CarMAT) + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C10AcylCarMAT/Kmcpt2C4AcylCoAMAT + C4AcylCoAMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCoAMAT + C6AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCarMAT*Kmcpt2CarMAT) + C6AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C10AcylCarMAT/Kmcpt2C6AcylCarMAT + C6AcylCarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCarMAT + C6AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCoAMAT*Kmcpt2CarMAT) + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C10AcylCarMAT/Kmcpt2C6AcylCoAMAT + C6AcylCoAMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCoAMAT + C8AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCarMAT*Kmcpt2CarMAT) + C8AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C10AcylCarMAT/Kmcpt2C8AcylCarMAT + C8AcylCarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCarMAT + C8AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCoAMAT*Kmcpt2CarMAT) + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C10AcylCarMAT/Kmcpt2C8AcylCoAMAT + C8AcylCoAMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCoAMAT + CarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + CoAMAT_VMAT*Kmcpt2C10AcylCarMAT + Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT)
	fRate11m() = 0.95*CarMAT_VMAT*Vcpt2/(C10AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2CoAMAT/Kmcpt2CarMAT + C10AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2 + C10AcylCarMAT_VMAT*Keqcpt2*Kmcpt2CoAMAT + C10AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCoAMAT*Kmcpt2CarMAT) + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT/Kmcpt2C10AcylCoAMAT + C10AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCoAMAT + C12AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCarMAT*Kmcpt2CarMAT) + C12AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT/Kmcpt2C12AcylCarMAT + C12AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCarMAT + C12AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCoAMAT*Kmcpt2CarMAT) + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT/Kmcpt2C12AcylCoAMAT + C12AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCoAMAT + C14AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCarMAT*Kmcpt2CarMAT) + C14AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT/Kmcpt2C14AcylCarMAT + C14AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCarMAT + C14AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCoAMAT*Kmcpt2CarMAT) + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT/Kmcpt2C14AcylCoAMAT + C14AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCoAMAT + C16AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCarMAT*Kmcpt2CarMAT) + C16AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT/Kmcpt2C16AcylCarMAT + C16AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCarMAT + C16AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCoAMAT*Kmcpt2CarMAT) + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT/Kmcpt2C16AcylCoAMAT + C16AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCoAMAT + C4AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCarMAT*Kmcpt2CarMAT) + C4AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT/Kmcpt2C4AcylCarMAT + C4AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCarMAT + C4AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCoAMAT*Kmcpt2CarMAT) + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT/Kmcpt2C4AcylCoAMAT + C4AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCoAMAT + C6AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCarMAT*Kmcpt2CarMAT) + C6AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT/Kmcpt2C6AcylCarMAT + C6AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCarMAT + C6AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCoAMAT*Kmcpt2CarMAT) + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT/Kmcpt2C6AcylCoAMAT + C6AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCoAMAT + C8AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCarMAT*Kmcpt2CarMAT) + C8AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT/Kmcpt2C8AcylCarMAT + C8AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCarMAT + C8AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCoAMAT*Kmcpt2CarMAT) + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT/Kmcpt2C8AcylCoAMAT + C8AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCoAMAT + CarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + CoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT + Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT)
	fRate12() = 0.35*CoAMAT_VMAT*Vcpt2/(C10AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCarMAT*Kmcpt2CarMAT) + C10AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C8AcylCarMAT/Kmcpt2C10AcylCarMAT + C10AcylCarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCarMAT + C10AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCoAMAT*Kmcpt2CarMAT) + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C8AcylCarMAT/Kmcpt2C10AcylCoAMAT + C10AcylCoAMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCoAMAT + C12AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCarMAT*Kmcpt2CarMAT) + C12AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C8AcylCarMAT/Kmcpt2C12AcylCarMAT + C12AcylCarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCarMAT + C12AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCoAMAT*Kmcpt2CarMAT) + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C8AcylCarMAT/Kmcpt2C12AcylCoAMAT + C12AcylCoAMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCoAMAT + C14AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCarMAT*Kmcpt2CarMAT) + C14AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C8AcylCarMAT/Kmcpt2C14AcylCarMAT + C14AcylCarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCarMAT + C14AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCoAMAT*Kmcpt2CarMAT) + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C8AcylCarMAT/Kmcpt2C14AcylCoAMAT + C14AcylCoAMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCoAMAT + C16AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCarMAT*Kmcpt2CarMAT) + C16AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C8AcylCarMAT/Kmcpt2C16AcylCarMAT + C16AcylCarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCarMAT + C16AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCoAMAT*Kmcpt2CarMAT) + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C8AcylCarMAT/Kmcpt2C16AcylCoAMAT + C16AcylCoAMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCoAMAT + C4AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCarMAT*Kmcpt2CarMAT) + C4AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C8AcylCarMAT/Kmcpt2C4AcylCarMAT + C4AcylCarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCarMAT + C4AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCoAMAT*Kmcpt2CarMAT) + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C8AcylCarMAT/Kmcpt2C4AcylCoAMAT + C4AcylCoAMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCoAMAT + C6AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCarMAT*Kmcpt2CarMAT) + C6AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C8AcylCarMAT/Kmcpt2C6AcylCarMAT + C6AcylCarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCarMAT + C6AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCoAMAT*Kmcpt2CarMAT) + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C8AcylCarMAT/Kmcpt2C6AcylCoAMAT + C6AcylCoAMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCoAMAT + C8AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + C8AcylCarMAT_VMAT*CoAMAT_VMAT + C8AcylCarMAT_VMAT*Kmcpt2CoAMAT + C8AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCoAMAT*Kmcpt2CarMAT) + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C8AcylCarMAT/Kmcpt2C8AcylCoAMAT + C8AcylCoAMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCoAMAT + CarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + CoAMAT_VMAT*Kmcpt2C8AcylCarMAT + Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT)
	fRate12m() = 0.35*CarMAT_VMAT*Vcpt2/(C10AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCarMAT*Kmcpt2CarMAT) + C10AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT/Kmcpt2C10AcylCarMAT + C10AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCarMAT + C10AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCoAMAT*Kmcpt2CarMAT) + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT/Kmcpt2C10AcylCoAMAT + C10AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCoAMAT + C12AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCarMAT*Kmcpt2CarMAT) + C12AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT/Kmcpt2C12AcylCarMAT + C12AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCarMAT + C12AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCoAMAT*Kmcpt2CarMAT) + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT/Kmcpt2C12AcylCoAMAT + C12AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCoAMAT + C14AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCarMAT*Kmcpt2CarMAT) + C14AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT/Kmcpt2C14AcylCarMAT + C14AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCarMAT + C14AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCoAMAT*Kmcpt2CarMAT) + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT/Kmcpt2C14AcylCoAMAT + C14AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCoAMAT + C16AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCarMAT*Kmcpt2CarMAT) + C16AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT/Kmcpt2C16AcylCarMAT + C16AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCarMAT + C16AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCoAMAT*Kmcpt2CarMAT) + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT/Kmcpt2C16AcylCoAMAT + C16AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCoAMAT + C4AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCarMAT*Kmcpt2CarMAT) + C4AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT/Kmcpt2C4AcylCarMAT + C4AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCarMAT + C4AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCoAMAT*Kmcpt2CarMAT) + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT/Kmcpt2C4AcylCoAMAT + C4AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCoAMAT + C6AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCarMAT*Kmcpt2CarMAT) + C6AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT/Kmcpt2C6AcylCarMAT + C6AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCarMAT + C6AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCoAMAT*Kmcpt2CarMAT) + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT/Kmcpt2C6AcylCoAMAT + C6AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCoAMAT + C8AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2CoAMAT/Kmcpt2CarMAT + C8AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2 + C8AcylCarMAT_VMAT*Keqcpt2*Kmcpt2CoAMAT + C8AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCoAMAT*Kmcpt2CarMAT) + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT/Kmcpt2C8AcylCoAMAT + C8AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCoAMAT + CarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + CoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT + Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT)
	fRate13() = 0.15*CoAMAT_VMAT*Vcpt2/(C10AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCarMAT*Kmcpt2CarMAT) + C10AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C6AcylCarMAT/Kmcpt2C10AcylCarMAT + C10AcylCarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCarMAT + C10AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCoAMAT*Kmcpt2CarMAT) + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C6AcylCarMAT/Kmcpt2C10AcylCoAMAT + C10AcylCoAMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCoAMAT + C12AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCarMAT*Kmcpt2CarMAT) + C12AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C6AcylCarMAT/Kmcpt2C12AcylCarMAT + C12AcylCarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCarMAT + C12AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCoAMAT*Kmcpt2CarMAT) + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C6AcylCarMAT/Kmcpt2C12AcylCoAMAT + C12AcylCoAMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCoAMAT + C14AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCarMAT*Kmcpt2CarMAT) + C14AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C6AcylCarMAT/Kmcpt2C14AcylCarMAT + C14AcylCarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCarMAT + C14AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCoAMAT*Kmcpt2CarMAT) + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C6AcylCarMAT/Kmcpt2C14AcylCoAMAT + C14AcylCoAMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCoAMAT + C16AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCarMAT*Kmcpt2CarMAT) + C16AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C6AcylCarMAT/Kmcpt2C16AcylCarMAT + C16AcylCarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCarMAT + C16AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCoAMAT*Kmcpt2CarMAT) + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C6AcylCarMAT/Kmcpt2C16AcylCoAMAT + C16AcylCoAMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCoAMAT + C4AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCarMAT*Kmcpt2CarMAT) + C4AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C6AcylCarMAT/Kmcpt2C4AcylCarMAT + C4AcylCarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCarMAT + C4AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCoAMAT*Kmcpt2CarMAT) + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C6AcylCarMAT/Kmcpt2C4AcylCoAMAT + C4AcylCoAMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCoAMAT + C6AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + C6AcylCarMAT_VMAT*CoAMAT_VMAT + C6AcylCarMAT_VMAT*Kmcpt2CoAMAT + C6AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCoAMAT*Kmcpt2CarMAT) + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C6AcylCarMAT/Kmcpt2C6AcylCoAMAT + C6AcylCoAMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCoAMAT + C8AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCarMAT*Kmcpt2CarMAT) + C8AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C6AcylCarMAT/Kmcpt2C8AcylCarMAT + C8AcylCarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCarMAT + C8AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCoAMAT*Kmcpt2CarMAT) + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C6AcylCarMAT/Kmcpt2C8AcylCoAMAT + C8AcylCoAMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCoAMAT + CarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + CoAMAT_VMAT*Kmcpt2C6AcylCarMAT + Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT)
	fRate13m() = 0.15*CarMAT_VMAT*Vcpt2/(C10AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCarMAT*Kmcpt2CarMAT) + C10AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT/Kmcpt2C10AcylCarMAT + C10AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCarMAT + C10AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCoAMAT*Kmcpt2CarMAT) + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT/Kmcpt2C10AcylCoAMAT + C10AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCoAMAT + C12AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCarMAT*Kmcpt2CarMAT) + C12AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT/Kmcpt2C12AcylCarMAT + C12AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCarMAT + C12AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCoAMAT*Kmcpt2CarMAT) + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT/Kmcpt2C12AcylCoAMAT + C12AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCoAMAT + C14AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCarMAT*Kmcpt2CarMAT) + C14AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT/Kmcpt2C14AcylCarMAT + C14AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCarMAT + C14AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCoAMAT*Kmcpt2CarMAT) + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT/Kmcpt2C14AcylCoAMAT + C14AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCoAMAT + C16AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCarMAT*Kmcpt2CarMAT) + C16AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT/Kmcpt2C16AcylCarMAT + C16AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCarMAT + C16AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCoAMAT*Kmcpt2CarMAT) + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT/Kmcpt2C16AcylCoAMAT + C16AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCoAMAT + C4AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCarMAT*Kmcpt2CarMAT) + C4AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT/Kmcpt2C4AcylCarMAT + C4AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCarMAT + C4AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCoAMAT*Kmcpt2CarMAT) + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT/Kmcpt2C4AcylCoAMAT + C4AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCoAMAT + C6AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2CoAMAT/Kmcpt2CarMAT + C6AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2 + C6AcylCarMAT_VMAT*Keqcpt2*Kmcpt2CoAMAT + C6AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCoAMAT*Kmcpt2CarMAT) + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT/Kmcpt2C6AcylCoAMAT + C6AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCoAMAT + C8AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCarMAT*Kmcpt2CarMAT) + C8AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT/Kmcpt2C8AcylCarMAT + C8AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCarMAT + C8AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCoAMAT*Kmcpt2CarMAT) + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT/Kmcpt2C8AcylCoAMAT + C8AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCoAMAT + CarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + CoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT + Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT)
	fRate14() = 0.01*CoAMAT_VMAT*Vcpt2/(C10AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCarMAT*Kmcpt2CarMAT) + C10AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C4AcylCarMAT/Kmcpt2C10AcylCarMAT + C10AcylCarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCarMAT + C10AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCoAMAT*Kmcpt2CarMAT) + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C4AcylCarMAT/Kmcpt2C10AcylCoAMAT + C10AcylCoAMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCoAMAT + C12AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCarMAT*Kmcpt2CarMAT) + C12AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C4AcylCarMAT/Kmcpt2C12AcylCarMAT + C12AcylCarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCarMAT + C12AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCoAMAT*Kmcpt2CarMAT) + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C4AcylCarMAT/Kmcpt2C12AcylCoAMAT + C12AcylCoAMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCoAMAT + C14AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCarMAT*Kmcpt2CarMAT) + C14AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C4AcylCarMAT/Kmcpt2C14AcylCarMAT + C14AcylCarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCarMAT + C14AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCoAMAT*Kmcpt2CarMAT) + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C4AcylCarMAT/Kmcpt2C14AcylCoAMAT + C14AcylCoAMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCoAMAT + C16AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCarMAT*Kmcpt2CarMAT) + C16AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C4AcylCarMAT/Kmcpt2C16AcylCarMAT + C16AcylCarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCarMAT + C16AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCoAMAT*Kmcpt2CarMAT) + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C4AcylCarMAT/Kmcpt2C16AcylCoAMAT + C16AcylCoAMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCoAMAT + C4AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + C4AcylCarMAT_VMAT*CoAMAT_VMAT + C4AcylCarMAT_VMAT*Kmcpt2CoAMAT + C4AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCoAMAT*Kmcpt2CarMAT) + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C4AcylCarMAT/Kmcpt2C4AcylCoAMAT + C4AcylCoAMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCoAMAT + C6AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCarMAT*Kmcpt2CarMAT) + C6AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C4AcylCarMAT/Kmcpt2C6AcylCarMAT + C6AcylCarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCarMAT + C6AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCoAMAT*Kmcpt2CarMAT) + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C4AcylCarMAT/Kmcpt2C6AcylCoAMAT + C6AcylCoAMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCoAMAT + C8AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCarMAT*Kmcpt2CarMAT) + C8AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C4AcylCarMAT/Kmcpt2C8AcylCarMAT + C8AcylCarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCarMAT + C8AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCoAMAT*Kmcpt2CarMAT) + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C4AcylCarMAT/Kmcpt2C8AcylCoAMAT + C8AcylCoAMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCoAMAT + CarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + CoAMAT_VMAT*Kmcpt2C4AcylCarMAT + Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT)
	fRate14m() = 0.01*CarMAT_VMAT*Vcpt2/(C10AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCarMAT*Kmcpt2CarMAT) + C10AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT/Kmcpt2C10AcylCarMAT + C10AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCarMAT + C10AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCoAMAT*Kmcpt2CarMAT) + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT/Kmcpt2C10AcylCoAMAT + C10AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCoAMAT + C12AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCarMAT*Kmcpt2CarMAT) + C12AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT/Kmcpt2C12AcylCarMAT + C12AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCarMAT + C12AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCoAMAT*Kmcpt2CarMAT) + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT/Kmcpt2C12AcylCoAMAT + C12AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCoAMAT + C14AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCarMAT*Kmcpt2CarMAT) + C14AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT/Kmcpt2C14AcylCarMAT + C14AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCarMAT + C14AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCoAMAT*Kmcpt2CarMAT) + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT/Kmcpt2C14AcylCoAMAT + C14AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCoAMAT + C16AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCarMAT*Kmcpt2CarMAT) + C16AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT/Kmcpt2C16AcylCarMAT + C16AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCarMAT + C16AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCoAMAT*Kmcpt2CarMAT) + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT/Kmcpt2C16AcylCoAMAT + C16AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCoAMAT + C4AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2CoAMAT/Kmcpt2CarMAT + C4AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2 + C4AcylCarMAT_VMAT*Keqcpt2*Kmcpt2CoAMAT + C4AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCoAMAT*Kmcpt2CarMAT) + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT/Kmcpt2C4AcylCoAMAT + C4AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCoAMAT + C6AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCarMAT*Kmcpt2CarMAT) + C6AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT/Kmcpt2C6AcylCarMAT + C6AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCarMAT + C6AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCoAMAT*Kmcpt2CarMAT) + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT/Kmcpt2C6AcylCoAMAT + C6AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCoAMAT + C8AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCarMAT*Kmcpt2CarMAT) + C8AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT/Kmcpt2C8AcylCarMAT + C8AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCarMAT + C8AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCoAMAT*Kmcpt2CarMAT) + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT/Kmcpt2C8AcylCoAMAT + C8AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCoAMAT + CarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + CoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT + Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT)
	fRate15() = 1.0*Vvlcad*(C16AcylCoAMAT_VMAT*(-FADHMAT_VMAT + FADtMAT_VMAT)/(KmvlcadC16AcylCoAMAT*KmvlcadFAD) - C16EnoylCoAMAT_VMAT*FADHMAT_VMAT/(Keqvlcad*KmvlcadC16AcylCoAMAT*KmvlcadFAD))/((FADHMAT_VMAT/KmvlcadFADH + 1 + (-FADHMAT_VMAT + FADtMAT_VMAT)/KmvlcadFAD)*(C12AcylCoAMAT_VMAT/KmvlcadC12AcylCoAMAT + C12EnoylCoAMAT_VMAT/KmvlcadC12EnoylCoAMAT + C14AcylCoAMAT_VMAT/KmvlcadC14AcylCoAMAT + C14EnoylCoAMAT_VMAT/KmvlcadC14EnoylCoAMAT + C16AcylCoAMAT_VMAT/KmvlcadC16AcylCoAMAT + C16EnoylCoAMAT_VMAT/KmvlcadC16EnoylCoAMAT + 1))
	fRate16() = 0.42*Vvlcad*(C14AcylCoAMAT_VMAT*(-FADHMAT_VMAT + FADtMAT_VMAT)/(KmvlcadC14AcylCoAMAT*KmvlcadFAD) - C14EnoylCoAMAT_VMAT*FADHMAT_VMAT/(Keqvlcad*KmvlcadC14AcylCoAMAT*KmvlcadFAD))/((FADHMAT_VMAT/KmvlcadFADH + 1 + (-FADHMAT_VMAT + FADtMAT_VMAT)/KmvlcadFAD)*(C12AcylCoAMAT_VMAT/KmvlcadC12AcylCoAMAT + C12EnoylCoAMAT_VMAT/KmvlcadC12EnoylCoAMAT + C14AcylCoAMAT_VMAT/KmvlcadC14AcylCoAMAT + C14EnoylCoAMAT_VMAT/KmvlcadC14EnoylCoAMAT + C16AcylCoAMAT_VMAT/KmvlcadC16AcylCoAMAT + C16EnoylCoAMAT_VMAT/KmvlcadC16EnoylCoAMAT + 1))
	fRate17() = 0.11*Vvlcad*(C12AcylCoAMAT_VMAT*(-FADHMAT_VMAT + FADtMAT_VMAT)/(KmvlcadC12AcylCoAMAT*KmvlcadFAD) - C12EnoylCoAMAT_VMAT*FADHMAT_VMAT/(Keqvlcad*KmvlcadC12AcylCoAMAT*KmvlcadFAD))/((FADHMAT_VMAT/KmvlcadFADH + 1 + (-FADHMAT_VMAT + FADtMAT_VMAT)/KmvlcadFAD)*(C12AcylCoAMAT_VMAT/KmvlcadC12AcylCoAMAT + C12EnoylCoAMAT_VMAT/KmvlcadC12EnoylCoAMAT + C14AcylCoAMAT_VMAT/KmvlcadC14AcylCoAMAT + C14EnoylCoAMAT_VMAT/KmvlcadC14EnoylCoAMAT + C16AcylCoAMAT_VMAT/KmvlcadC16AcylCoAMAT + C16EnoylCoAMAT_VMAT/KmvlcadC16EnoylCoAMAT + 1))
	fRate18() = 0.9*Vlcad*(C16AcylCoAMAT_VMAT*(-FADHMAT_VMAT + FADtMAT_VMAT)/(KmlcadC16AcylCoAMAT*KmlcadFAD) - C16EnoylCoAMAT_VMAT*FADHMAT_VMAT/(Keqlcad*KmlcadC16AcylCoAMAT*KmlcadFAD))/((FADHMAT_VMAT/KmlcadFADH + 1 + (-FADHMAT_VMAT + FADtMAT_VMAT)/KmlcadFAD)*(C10AcylCoAMAT_VMAT/KmlcadC10AcylCoAMAT + C10EnoylCoAMAT_VMAT/KmlcadC10EnoylCoAMAT + C12AcylCoAMAT_VMAT/KmlcadC12AcylCoAMAT + C12EnoylCoAMAT_VMAT/KmlcadC12EnoylCoAMAT + C14AcylCoAMAT_VMAT/KmlcadC14AcylCoAMAT + C14EnoylCoAMAT_VMAT/KmlcadC14EnoylCoAMAT + C16AcylCoAMAT_VMAT/KmlcadC16AcylCoAMAT + C16EnoylCoAMAT_VMAT/KmlcadC16EnoylCoAMAT + C8AcylCoAMAT_VMAT/KmlcadC8AcylCoAMAT + C8EnoylCoAMAT_VMAT/KmlcadC8EnoylCoAMAT + 1))
	fRate19() = 1.0*Vlcad*(C14AcylCoAMAT_VMAT*(-FADHMAT_VMAT + FADtMAT_VMAT)/(KmlcadC14AcylCoAMAT*KmlcadFAD) - C14EnoylCoAMAT_VMAT*FADHMAT_VMAT/(Keqlcad*KmlcadC14AcylCoAMAT*KmlcadFAD))/((FADHMAT_VMAT/KmlcadFADH + 1 + (-FADHMAT_VMAT + FADtMAT_VMAT)/KmlcadFAD)*(C10AcylCoAMAT_VMAT/KmlcadC10AcylCoAMAT + C10EnoylCoAMAT_VMAT/KmlcadC10EnoylCoAMAT + C12AcylCoAMAT_VMAT/KmlcadC12AcylCoAMAT + C12EnoylCoAMAT_VMAT/KmlcadC12EnoylCoAMAT + C14AcylCoAMAT_VMAT/KmlcadC14AcylCoAMAT + C14EnoylCoAMAT_VMAT/KmlcadC14EnoylCoAMAT + C16AcylCoAMAT_VMAT/KmlcadC16AcylCoAMAT + C16EnoylCoAMAT_VMAT/KmlcadC16EnoylCoAMAT + C8AcylCoAMAT_VMAT/KmlcadC8AcylCoAMAT + C8EnoylCoAMAT_VMAT/KmlcadC8EnoylCoAMAT + 1))
	fRate20() = 0.9*Vlcad*(C12AcylCoAMAT_VMAT*(-FADHMAT_VMAT + FADtMAT_VMAT)/(KmlcadC12AcylCoAMAT*KmlcadFAD) - C14EnoylCoAMAT_VMAT*FADHMAT_VMAT/(Keqlcad*KmlcadC12AcylCoAMAT*KmlcadFAD))/((FADHMAT_VMAT/KmlcadFADH + 1 + (-FADHMAT_VMAT + FADtMAT_VMAT)/KmlcadFAD)*(C10AcylCoAMAT_VMAT/KmlcadC10AcylCoAMAT + C10EnoylCoAMAT_VMAT/KmlcadC10EnoylCoAMAT + C12AcylCoAMAT_VMAT/KmlcadC12AcylCoAMAT + C14AcylCoAMAT_VMAT/KmlcadC14AcylCoAMAT + C14EnoylCoAMAT_VMAT/KmlcadC14EnoylCoAMAT + C14EnoylCoAMAT_VMAT/KmlcadC12EnoylCoAMAT + C16AcylCoAMAT_VMAT/KmlcadC16AcylCoAMAT + C16EnoylCoAMAT_VMAT/KmlcadC16EnoylCoAMAT + C8AcylCoAMAT_VMAT/KmlcadC8AcylCoAMAT + C8EnoylCoAMAT_VMAT/KmlcadC8EnoylCoAMAT + 1))
	fRate21() = 0.75*Vlcad*(C10AcylCoAMAT_VMAT*(-FADHMAT_VMAT + FADtMAT_VMAT)/(KmlcadC10AcylCoAMAT*KmlcadFAD) - C10EnoylCoAMAT_VMAT*FADHMAT_VMAT/(Keqlcad*KmlcadC10AcylCoAMAT*KmlcadFAD))/((FADHMAT_VMAT/KmlcadFADH + 1 + (-FADHMAT_VMAT + FADtMAT_VMAT)/KmlcadFAD)*(C10AcylCoAMAT_VMAT/KmlcadC10AcylCoAMAT + C10EnoylCoAMAT_VMAT/KmlcadC10EnoylCoAMAT + C12AcylCoAMAT_VMAT/KmlcadC12AcylCoAMAT + C12EnoylCoAMAT_VMAT/KmlcadC12EnoylCoAMAT + C14AcylCoAMAT_VMAT/KmlcadC14AcylCoAMAT + C14EnoylCoAMAT_VMAT/KmlcadC14EnoylCoAMAT + C16AcylCoAMAT_VMAT/KmlcadC16AcylCoAMAT + C16EnoylCoAMAT_VMAT/KmlcadC16EnoylCoAMAT + C8AcylCoAMAT_VMAT/KmlcadC8AcylCoAMAT + C8EnoylCoAMAT_VMAT/KmlcadC8EnoylCoAMAT + 1))
	fRate22() = 0.4*Vlcad*(C8AcylCoAMAT_VMAT*(-FADHMAT_VMAT + FADtMAT_VMAT)/(KmlcadC8AcylCoAMAT*KmlcadFAD) - C8EnoylCoAMAT_VMAT*FADHMAT_VMAT/(Keqlcad*KmlcadC8AcylCoAMAT*KmlcadFAD))/((FADHMAT_VMAT/KmlcadFADH + 1 + (-FADHMAT_VMAT + FADtMAT_VMAT)/KmlcadFAD)*(C10AcylCoAMAT_VMAT/KmlcadC10AcylCoAMAT + C10EnoylCoAMAT_VMAT/KmlcadC10EnoylCoAMAT + C12AcylCoAMAT_VMAT/KmlcadC12AcylCoAMAT + C12EnoylCoAMAT_VMAT/KmlcadC12EnoylCoAMAT + C14AcylCoAMAT_VMAT/KmlcadC14AcylCoAMAT + C14EnoylCoAMAT_VMAT/KmlcadC14EnoylCoAMAT + C16AcylCoAMAT_VMAT/KmlcadC16AcylCoAMAT + C16EnoylCoAMAT_VMAT/KmlcadC16EnoylCoAMAT + C8AcylCoAMAT_VMAT/KmlcadC8AcylCoAMAT + C8EnoylCoAMAT_VMAT/KmlcadC8EnoylCoAMAT + 1))
	fRate23() = 0.38*Vmcad*(C12AcylCoAMAT_VMAT*(-FADHMAT_VMAT + FADtMAT_VMAT)/(KmmcadC12AcylCoAMAT*KmmcadFAD) - C12EnoylCoAMAT_VMAT*FADHMAT_VMAT/(Keqmcad*KmmcadC12AcylCoAMAT*KmmcadFAD))/((FADHMAT_VMAT/KmmcadFADH + 1 + (-FADHMAT_VMAT + FADtMAT_VMAT)/KmmcadFAD)*(C10AcylCoAMAT_VMAT/KmmcadC10AcylCoAMAT + C10EnoylCoAMAT_VMAT/KmmcadC10EnoylCoAMAT + C12AcylCoAMAT_VMAT/KmmcadC12AcylCoAMAT + C12EnoylCoAMAT_VMAT/KmmcadC12EnoylCoAMAT + C4AcylCoAMAT_VMAT/KmmcadC4AcylCoAMAT + C4EnoylCoAMAT_VMAT/KmmcadC4EnoylCoAMAT + C6AcylCoAMAT_VMAT/KmmcadC6AcylCoAMAT + C6EnoylCoAMAT_VMAT/KmmcadC6EnoylCoAMAT + C8AcylCoAMAT_VMAT/KmmcadC8AcylCoAMAT + C8EnoylCoAMAT_VMAT/KmmcadC8EnoylCoAMAT + 1))
	fRate24() = 0.8*Vmcad*(C10AcylCoAMAT_VMAT*(-FADHMAT_VMAT + FADtMAT_VMAT)/(KmmcadC10AcylCoAMAT*KmmcadFAD) - C10EnoylCoAMAT_VMAT*FADHMAT_VMAT/(Keqmcad*KmmcadC10AcylCoAMAT*KmmcadFAD))/((FADHMAT_VMAT/KmmcadFADH + 1 + (-FADHMAT_VMAT + FADtMAT_VMAT)/KmmcadFAD)*(C10AcylCoAMAT_VMAT/KmmcadC10AcylCoAMAT + C10EnoylCoAMAT_VMAT/KmmcadC10EnoylCoAMAT + C12AcylCoAMAT_VMAT/KmmcadC12AcylCoAMAT + C12EnoylCoAMAT_VMAT/KmmcadC12EnoylCoAMAT + C4AcylCoAMAT_VMAT/KmmcadC4AcylCoAMAT + C4EnoylCoAMAT_VMAT/KmmcadC4EnoylCoAMAT + C6AcylCoAMAT_VMAT/KmmcadC6AcylCoAMAT + C6EnoylCoAMAT_VMAT/KmmcadC6EnoylCoAMAT + C8AcylCoAMAT_VMAT/KmmcadC8AcylCoAMAT + C8EnoylCoAMAT_VMAT/KmmcadC8EnoylCoAMAT + 1))
	fRate25() = 0.87*Vmcad*(C8AcylCoAMAT_VMAT*(-FADHMAT_VMAT + FADtMAT_VMAT)/(KmmcadC8AcylCoAMAT*KmmcadFAD) - C8EnoylCoAMAT_VMAT*FADHMAT_VMAT/(Keqmcad*KmmcadC8AcylCoAMAT*KmmcadFAD))/((FADHMAT_VMAT/KmmcadFADH + 1 + (-FADHMAT_VMAT + FADtMAT_VMAT)/KmmcadFAD)*(C10AcylCoAMAT_VMAT/KmmcadC10AcylCoAMAT + C10EnoylCoAMAT_VMAT/KmmcadC10EnoylCoAMAT + C12AcylCoAMAT_VMAT/KmmcadC12AcylCoAMAT + C12EnoylCoAMAT_VMAT/KmmcadC12EnoylCoAMAT + C4AcylCoAMAT_VMAT/KmmcadC4AcylCoAMAT + C4EnoylCoAMAT_VMAT/KmmcadC4EnoylCoAMAT + C6AcylCoAMAT_VMAT/KmmcadC6AcylCoAMAT + C6EnoylCoAMAT_VMAT/KmmcadC6EnoylCoAMAT + C8AcylCoAMAT_VMAT/KmmcadC8AcylCoAMAT + C8EnoylCoAMAT_VMAT/KmmcadC8EnoylCoAMAT + 1))
	fRate26() = 1.0*Vmcad*(C6AcylCoAMAT_VMAT*(-FADHMAT_VMAT + FADtMAT_VMAT)/(KmmcadC6AcylCoAMAT*KmmcadFAD) - C6EnoylCoAMAT_VMAT*FADHMAT_VMAT/(Keqmcad*KmmcadC6AcylCoAMAT*KmmcadFAD))/((FADHMAT_VMAT/KmmcadFADH + 1 + (-FADHMAT_VMAT + FADtMAT_VMAT)/KmmcadFAD)*(C10AcylCoAMAT_VMAT/KmmcadC10AcylCoAMAT + C10EnoylCoAMAT_VMAT/KmmcadC10EnoylCoAMAT + C12AcylCoAMAT_VMAT/KmmcadC12AcylCoAMAT + C12EnoylCoAMAT_VMAT/KmmcadC12EnoylCoAMAT + C4AcylCoAMAT_VMAT/KmmcadC4AcylCoAMAT + C4EnoylCoAMAT_VMAT/KmmcadC4EnoylCoAMAT + C6AcylCoAMAT_VMAT/KmmcadC6AcylCoAMAT + C6EnoylCoAMAT_VMAT/KmmcadC6EnoylCoAMAT + C8AcylCoAMAT_VMAT/KmmcadC8AcylCoAMAT + C8EnoylCoAMAT_VMAT/KmmcadC8EnoylCoAMAT + 1))
	fRate27() = 0.12*Vmcad*(C4AcylCoAMAT_VMAT*(-FADHMAT_VMAT + FADtMAT_VMAT)/(KmmcadC4AcylCoAMAT*KmmcadFAD) - C4EnoylCoAMAT_VMAT*FADHMAT_VMAT/(Keqmcad*KmmcadC4AcylCoAMAT*KmmcadFAD))/((FADHMAT_VMAT/KmmcadFADH + 1 + (-FADHMAT_VMAT + FADtMAT_VMAT)/KmmcadFAD)*(C10AcylCoAMAT_VMAT/KmmcadC10AcylCoAMAT + C10EnoylCoAMAT_VMAT/KmmcadC10EnoylCoAMAT + C12AcylCoAMAT_VMAT/KmmcadC12AcylCoAMAT + C12EnoylCoAMAT_VMAT/KmmcadC12EnoylCoAMAT + C4AcylCoAMAT_VMAT/KmmcadC4AcylCoAMAT + C4EnoylCoAMAT_VMAT/KmmcadC4EnoylCoAMAT + C6AcylCoAMAT_VMAT/KmmcadC6AcylCoAMAT + C6EnoylCoAMAT_VMAT/KmmcadC6EnoylCoAMAT + C8AcylCoAMAT_VMAT/KmmcadC8AcylCoAMAT + C8EnoylCoAMAT_VMAT/KmmcadC8EnoylCoAMAT + 1))
	fRate28() = 0.3*Vscad*(C6AcylCoAMAT_VMAT*(-FADHMAT_VMAT + FADtMAT_VMAT)/(KmscadC6AcylCoAMAT*KmscadFAD) - C6EnoylCoAMAT_VMAT*FADHMAT_VMAT/(Keqscad*KmscadC6AcylCoAMAT*KmscadFAD))/((FADHMAT_VMAT/KmscadFADH + 1 + (-FADHMAT_VMAT + FADtMAT_VMAT)/KmscadFAD)*(C4AcylCoAMAT_VMAT/KmscadC4AcylCoAMAT + C4EnoylCoAMAT_VMAT/KmscadC4EnoylCoAMAT + C6AcylCoAMAT_VMAT/KmscadC6AcylCoAMAT + C6EnoylCoAMAT_VMAT/KmscadC6EnoylCoAMAT + 1))
	fRate29() = 1.0*Vscad*(C4AcylCoAMAT_VMAT*(-FADHMAT_VMAT + FADtMAT_VMAT)/(KmscadC4AcylCoAMAT*KmscadFAD) - C4EnoylCoAMAT_VMAT*FADHMAT_VMAT/(Keqscad*KmscadC4AcylCoAMAT*KmscadFAD))/((FADHMAT_VMAT/KmscadFADH + 1 + (-FADHMAT_VMAT + FADtMAT_VMAT)/KmscadFAD)*(C4AcylCoAMAT_VMAT/KmscadC4AcylCoAMAT + C4EnoylCoAMAT_VMAT/KmscadC4EnoylCoAMAT + C6AcylCoAMAT_VMAT/KmscadC6AcylCoAMAT + C6EnoylCoAMAT_VMAT/KmscadC6EnoylCoAMAT + 1))
	fRate30() = 0.13*Vcrot/(C10EnoylCoAMAT_VMAT*KmcrotC16EnoylCoAMAT/KmcrotC10EnoylCoAMAT + C10HydroxyacylCoAMAT_VMAT*KmcrotC16EnoylCoAMAT/KmcrotC10HydroxyacylCoAMAT + C12EnoylCoAMAT_VMAT*KmcrotC16EnoylCoAMAT/KmcrotC12EnoylCoAMAT + C12HydroxyacylCoAMAT_VMAT*KmcrotC16EnoylCoAMAT/KmcrotC12HydroxyacylCoAMAT + C14EnoylCoAMAT_VMAT*KmcrotC16EnoylCoAMAT/KmcrotC14EnoylCoAMAT + C14HydroxyacylCoAMAT_VMAT*KmcrotC16EnoylCoAMAT/KmcrotC14HydroxyacylCoAMAT + C16EnoylCoAMAT_VMAT + C16HydroxyacylCoAMAT_VMAT*KmcrotC16EnoylCoAMAT/KmcrotC16HydroxyacylCoAMAT + C4AcetoacylCoAMAT_VMAT*KmcrotC16EnoylCoAMAT/KicrotC4AcetoacylCoA + C4EnoylCoAMAT_VMAT*KmcrotC16EnoylCoAMAT/KmcrotC4EnoylCoAMAT + C4HydroxyacylCoAMAT_VMAT*KmcrotC16EnoylCoAMAT/KmcrotC4HydroxyacylCoAMAT + C6EnoylCoAMAT_VMAT*KmcrotC16EnoylCoAMAT/KmcrotC6EnoylCoAMAT + C6HydroxyacylCoAMAT_VMAT*KmcrotC16EnoylCoAMAT/KmcrotC6HydroxyacylCoAMAT + C8EnoylCoAMAT_VMAT*KmcrotC16EnoylCoAMAT/KmcrotC8EnoylCoAMAT + C8HydroxyacylCoAMAT_VMAT*KmcrotC16EnoylCoAMAT/KmcrotC8HydroxyacylCoAMAT + KmcrotC16EnoylCoAMAT)
	fRate30m() = 0.13*Vcrot/(C10EnoylCoAMAT_VMAT*Keqcrot*KmcrotC16EnoylCoAMAT/KmcrotC10EnoylCoAMAT + C10HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC16EnoylCoAMAT/KmcrotC10HydroxyacylCoAMAT + C12EnoylCoAMAT_VMAT*Keqcrot*KmcrotC16EnoylCoAMAT/KmcrotC12EnoylCoAMAT + C12HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC16EnoylCoAMAT/KmcrotC12HydroxyacylCoAMAT + C14EnoylCoAMAT_VMAT*Keqcrot*KmcrotC16EnoylCoAMAT/KmcrotC14EnoylCoAMAT + C14HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC16EnoylCoAMAT/KmcrotC14HydroxyacylCoAMAT + C16EnoylCoAMAT_VMAT*Keqcrot + C16HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC16EnoylCoAMAT/KmcrotC16HydroxyacylCoAMAT + C4AcetoacylCoAMAT_VMAT*Keqcrot*KmcrotC16EnoylCoAMAT/KicrotC4AcetoacylCoA + C4EnoylCoAMAT_VMAT*Keqcrot*KmcrotC16EnoylCoAMAT/KmcrotC4EnoylCoAMAT + C4HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC16EnoylCoAMAT/KmcrotC4HydroxyacylCoAMAT + C6EnoylCoAMAT_VMAT*Keqcrot*KmcrotC16EnoylCoAMAT/KmcrotC6EnoylCoAMAT + C6HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC16EnoylCoAMAT/KmcrotC6HydroxyacylCoAMAT + C8EnoylCoAMAT_VMAT*Keqcrot*KmcrotC16EnoylCoAMAT/KmcrotC8EnoylCoAMAT + C8HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC16EnoylCoAMAT/KmcrotC8HydroxyacylCoAMAT + Keqcrot*KmcrotC16EnoylCoAMAT)
	fRate31() = 0.2*Vcrot/(C10EnoylCoAMAT_VMAT*KmcrotC14EnoylCoAMAT/KmcrotC10EnoylCoAMAT + C10HydroxyacylCoAMAT_VMAT*KmcrotC14EnoylCoAMAT/KmcrotC10HydroxyacylCoAMAT + C12EnoylCoAMAT_VMAT*KmcrotC14EnoylCoAMAT/KmcrotC12EnoylCoAMAT + C12HydroxyacylCoAMAT_VMAT*KmcrotC14EnoylCoAMAT/KmcrotC12HydroxyacylCoAMAT + C14EnoylCoAMAT_VMAT + C14HydroxyacylCoAMAT_VMAT*KmcrotC14EnoylCoAMAT/KmcrotC14HydroxyacylCoAMAT + C16EnoylCoAMAT_VMAT*KmcrotC14EnoylCoAMAT/KmcrotC16EnoylCoAMAT + C16HydroxyacylCoAMAT_VMAT*KmcrotC14EnoylCoAMAT/KmcrotC16HydroxyacylCoAMAT + C4AcetoacylCoAMAT_VMAT*KmcrotC14EnoylCoAMAT/KicrotC4AcetoacylCoA + C4EnoylCoAMAT_VMAT*KmcrotC14EnoylCoAMAT/KmcrotC4EnoylCoAMAT + C4HydroxyacylCoAMAT_VMAT*KmcrotC14EnoylCoAMAT/KmcrotC4HydroxyacylCoAMAT + C6EnoylCoAMAT_VMAT*KmcrotC14EnoylCoAMAT/KmcrotC6EnoylCoAMAT + C6HydroxyacylCoAMAT_VMAT*KmcrotC14EnoylCoAMAT/KmcrotC6HydroxyacylCoAMAT + C8EnoylCoAMAT_VMAT*KmcrotC14EnoylCoAMAT/KmcrotC8EnoylCoAMAT + C8HydroxyacylCoAMAT_VMAT*KmcrotC14EnoylCoAMAT/KmcrotC8HydroxyacylCoAMAT + KmcrotC14EnoylCoAMAT)
	fRate31m() = 0.2*Vcrot/(C10EnoylCoAMAT_VMAT*Keqcrot*KmcrotC14EnoylCoAMAT/KmcrotC10EnoylCoAMAT + C10HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC14EnoylCoAMAT/KmcrotC10HydroxyacylCoAMAT + C12EnoylCoAMAT_VMAT*Keqcrot*KmcrotC14EnoylCoAMAT/KmcrotC12EnoylCoAMAT + C12HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC14EnoylCoAMAT/KmcrotC12HydroxyacylCoAMAT + C14EnoylCoAMAT_VMAT*Keqcrot + C14HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC14EnoylCoAMAT/KmcrotC14HydroxyacylCoAMAT + C16EnoylCoAMAT_VMAT*Keqcrot*KmcrotC14EnoylCoAMAT/KmcrotC16EnoylCoAMAT + C16HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC14EnoylCoAMAT/KmcrotC16HydroxyacylCoAMAT + C4AcetoacylCoAMAT_VMAT*Keqcrot*KmcrotC14EnoylCoAMAT/KicrotC4AcetoacylCoA + C4EnoylCoAMAT_VMAT*Keqcrot*KmcrotC14EnoylCoAMAT/KmcrotC4EnoylCoAMAT + C4HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC14EnoylCoAMAT/KmcrotC4HydroxyacylCoAMAT + C6EnoylCoAMAT_VMAT*Keqcrot*KmcrotC14EnoylCoAMAT/KmcrotC6EnoylCoAMAT + C6HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC14EnoylCoAMAT/KmcrotC6HydroxyacylCoAMAT + C8EnoylCoAMAT_VMAT*Keqcrot*KmcrotC14EnoylCoAMAT/KmcrotC8EnoylCoAMAT + C8HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC14EnoylCoAMAT/KmcrotC8HydroxyacylCoAMAT + Keqcrot*KmcrotC14EnoylCoAMAT)
	fRate32() = 0.25*Vcrot/(C10EnoylCoAMAT_VMAT*KmcrotC12EnoylCoAMAT/KmcrotC10EnoylCoAMAT + C10HydroxyacylCoAMAT_VMAT*KmcrotC12EnoylCoAMAT/KmcrotC10HydroxyacylCoAMAT + C12EnoylCoAMAT_VMAT + C12HydroxyacylCoAMAT_VMAT*KmcrotC12EnoylCoAMAT/KmcrotC12HydroxyacylCoAMAT + C14EnoylCoAMAT_VMAT*KmcrotC12EnoylCoAMAT/KmcrotC14EnoylCoAMAT + C14HydroxyacylCoAMAT_VMAT*KmcrotC12EnoylCoAMAT/KmcrotC14HydroxyacylCoAMAT + C16EnoylCoAMAT_VMAT*KmcrotC12EnoylCoAMAT/KmcrotC16EnoylCoAMAT + C16HydroxyacylCoAMAT_VMAT*KmcrotC12EnoylCoAMAT/KmcrotC16HydroxyacylCoAMAT + C4AcetoacylCoAMAT_VMAT*KmcrotC12EnoylCoAMAT/KicrotC4AcetoacylCoA + C4EnoylCoAMAT_VMAT*KmcrotC12EnoylCoAMAT/KmcrotC4EnoylCoAMAT + C4HydroxyacylCoAMAT_VMAT*KmcrotC12EnoylCoAMAT/KmcrotC4HydroxyacylCoAMAT + C6EnoylCoAMAT_VMAT*KmcrotC12EnoylCoAMAT/KmcrotC6EnoylCoAMAT + C6HydroxyacylCoAMAT_VMAT*KmcrotC12EnoylCoAMAT/KmcrotC6HydroxyacylCoAMAT + C8EnoylCoAMAT_VMAT*KmcrotC12EnoylCoAMAT/KmcrotC8EnoylCoAMAT + C8HydroxyacylCoAMAT_VMAT*KmcrotC12EnoylCoAMAT/KmcrotC8HydroxyacylCoAMAT + KmcrotC12EnoylCoAMAT)
	fRate32m() = 0.25*Vcrot/(C10EnoylCoAMAT_VMAT*Keqcrot*KmcrotC12EnoylCoAMAT/KmcrotC10EnoylCoAMAT + C10HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC12EnoylCoAMAT/KmcrotC10HydroxyacylCoAMAT + C12EnoylCoAMAT_VMAT*Keqcrot + C12HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC12EnoylCoAMAT/KmcrotC12HydroxyacylCoAMAT + C14EnoylCoAMAT_VMAT*Keqcrot*KmcrotC12EnoylCoAMAT/KmcrotC14EnoylCoAMAT + C14HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC12EnoylCoAMAT/KmcrotC14HydroxyacylCoAMAT + C16EnoylCoAMAT_VMAT*Keqcrot*KmcrotC12EnoylCoAMAT/KmcrotC16EnoylCoAMAT + C16HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC12EnoylCoAMAT/KmcrotC16HydroxyacylCoAMAT + C4AcetoacylCoAMAT_VMAT*Keqcrot*KmcrotC12EnoylCoAMAT/KicrotC4AcetoacylCoA + C4EnoylCoAMAT_VMAT*Keqcrot*KmcrotC12EnoylCoAMAT/KmcrotC4EnoylCoAMAT + C4HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC12EnoylCoAMAT/KmcrotC4HydroxyacylCoAMAT + C6EnoylCoAMAT_VMAT*Keqcrot*KmcrotC12EnoylCoAMAT/KmcrotC6EnoylCoAMAT + C6HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC12EnoylCoAMAT/KmcrotC6HydroxyacylCoAMAT + C8EnoylCoAMAT_VMAT*Keqcrot*KmcrotC12EnoylCoAMAT/KmcrotC8EnoylCoAMAT + C8HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC12EnoylCoAMAT/KmcrotC8HydroxyacylCoAMAT + Keqcrot*KmcrotC12EnoylCoAMAT)
	fRate33() = 0.33*Vcrot/(C10EnoylCoAMAT_VMAT + C10HydroxyacylCoAMAT_VMAT*KmcrotC10EnoylCoAMAT/KmcrotC10HydroxyacylCoAMAT + C12EnoylCoAMAT_VMAT*KmcrotC10EnoylCoAMAT/KmcrotC12EnoylCoAMAT + C12HydroxyacylCoAMAT_VMAT*KmcrotC10EnoylCoAMAT/KmcrotC12HydroxyacylCoAMAT + C14EnoylCoAMAT_VMAT*KmcrotC10EnoylCoAMAT/KmcrotC14EnoylCoAMAT + C14HydroxyacylCoAMAT_VMAT*KmcrotC10EnoylCoAMAT/KmcrotC14HydroxyacylCoAMAT + C16EnoylCoAMAT_VMAT*KmcrotC10EnoylCoAMAT/KmcrotC16EnoylCoAMAT + C16HydroxyacylCoAMAT_VMAT*KmcrotC10EnoylCoAMAT/KmcrotC16HydroxyacylCoAMAT + C4AcetoacylCoAMAT_VMAT*KmcrotC10EnoylCoAMAT/KicrotC4AcetoacylCoA + C4EnoylCoAMAT_VMAT*KmcrotC10EnoylCoAMAT/KmcrotC4EnoylCoAMAT + C4HydroxyacylCoAMAT_VMAT*KmcrotC10EnoylCoAMAT/KmcrotC4HydroxyacylCoAMAT + C6EnoylCoAMAT_VMAT*KmcrotC10EnoylCoAMAT/KmcrotC6EnoylCoAMAT + C6HydroxyacylCoAMAT_VMAT*KmcrotC10EnoylCoAMAT/KmcrotC6HydroxyacylCoAMAT + C8EnoylCoAMAT_VMAT*KmcrotC10EnoylCoAMAT/KmcrotC8EnoylCoAMAT + C8HydroxyacylCoAMAT_VMAT*KmcrotC10EnoylCoAMAT/KmcrotC8HydroxyacylCoAMAT + KmcrotC10EnoylCoAMAT)
	fRate33m() = 0.33*Vcrot/(C10EnoylCoAMAT_VMAT*Keqcrot + C10HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC10EnoylCoAMAT/KmcrotC10HydroxyacylCoAMAT + C12EnoylCoAMAT_VMAT*Keqcrot*KmcrotC10EnoylCoAMAT/KmcrotC12EnoylCoAMAT + C12HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC10EnoylCoAMAT/KmcrotC12HydroxyacylCoAMAT + C14EnoylCoAMAT_VMAT*Keqcrot*KmcrotC10EnoylCoAMAT/KmcrotC14EnoylCoAMAT + C14HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC10EnoylCoAMAT/KmcrotC14HydroxyacylCoAMAT + C16EnoylCoAMAT_VMAT*Keqcrot*KmcrotC10EnoylCoAMAT/KmcrotC16EnoylCoAMAT + C16HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC10EnoylCoAMAT/KmcrotC16HydroxyacylCoAMAT + C4AcetoacylCoAMAT_VMAT*Keqcrot*KmcrotC10EnoylCoAMAT/KicrotC4AcetoacylCoA + C4EnoylCoAMAT_VMAT*Keqcrot*KmcrotC10EnoylCoAMAT/KmcrotC4EnoylCoAMAT + C4HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC10EnoylCoAMAT/KmcrotC4HydroxyacylCoAMAT + C6EnoylCoAMAT_VMAT*Keqcrot*KmcrotC10EnoylCoAMAT/KmcrotC6EnoylCoAMAT + C6HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC10EnoylCoAMAT/KmcrotC6HydroxyacylCoAMAT + C8EnoylCoAMAT_VMAT*Keqcrot*KmcrotC10EnoylCoAMAT/KmcrotC8EnoylCoAMAT + C8HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC10EnoylCoAMAT/KmcrotC8HydroxyacylCoAMAT + Keqcrot*KmcrotC10EnoylCoAMAT)
	fRate34() = 0.58*Vcrot/(C10EnoylCoAMAT_VMAT*KmcrotC8EnoylCoAMAT/KmcrotC10EnoylCoAMAT + C10HydroxyacylCoAMAT_VMAT*KmcrotC8EnoylCoAMAT/KmcrotC10HydroxyacylCoAMAT + C12EnoylCoAMAT_VMAT*KmcrotC8EnoylCoAMAT/KmcrotC12EnoylCoAMAT + C12HydroxyacylCoAMAT_VMAT*KmcrotC8EnoylCoAMAT/KmcrotC12HydroxyacylCoAMAT + C14EnoylCoAMAT_VMAT*KmcrotC8EnoylCoAMAT/KmcrotC14EnoylCoAMAT + C14HydroxyacylCoAMAT_VMAT*KmcrotC8EnoylCoAMAT/KmcrotC14HydroxyacylCoAMAT + C16EnoylCoAMAT_VMAT*KmcrotC8EnoylCoAMAT/KmcrotC16EnoylCoAMAT + C16HydroxyacylCoAMAT_VMAT*KmcrotC8EnoylCoAMAT/KmcrotC16HydroxyacylCoAMAT + C4AcetoacylCoAMAT_VMAT*KmcrotC8EnoylCoAMAT/KicrotC4AcetoacylCoA + C4EnoylCoAMAT_VMAT*KmcrotC8EnoylCoAMAT/KmcrotC4EnoylCoAMAT + C4HydroxyacylCoAMAT_VMAT*KmcrotC8EnoylCoAMAT/KmcrotC4HydroxyacylCoAMAT + C6EnoylCoAMAT_VMAT*KmcrotC8EnoylCoAMAT/KmcrotC6EnoylCoAMAT + C6HydroxyacylCoAMAT_VMAT*KmcrotC8EnoylCoAMAT/KmcrotC6HydroxyacylCoAMAT + C8EnoylCoAMAT_VMAT + C8HydroxyacylCoAMAT_VMAT*KmcrotC8EnoylCoAMAT/KmcrotC8HydroxyacylCoAMAT + KmcrotC8EnoylCoAMAT)
	fRate34m() = 0.58*Vcrot/(C10EnoylCoAMAT_VMAT*Keqcrot*KmcrotC8EnoylCoAMAT/KmcrotC10EnoylCoAMAT + C10HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC8EnoylCoAMAT/KmcrotC10HydroxyacylCoAMAT + C12EnoylCoAMAT_VMAT*Keqcrot*KmcrotC8EnoylCoAMAT/KmcrotC12EnoylCoAMAT + C12HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC8EnoylCoAMAT/KmcrotC12HydroxyacylCoAMAT + C14EnoylCoAMAT_VMAT*Keqcrot*KmcrotC8EnoylCoAMAT/KmcrotC14EnoylCoAMAT + C14HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC8EnoylCoAMAT/KmcrotC14HydroxyacylCoAMAT + C16EnoylCoAMAT_VMAT*Keqcrot*KmcrotC8EnoylCoAMAT/KmcrotC16EnoylCoAMAT + C16HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC8EnoylCoAMAT/KmcrotC16HydroxyacylCoAMAT + C4AcetoacylCoAMAT_VMAT*Keqcrot*KmcrotC8EnoylCoAMAT/KicrotC4AcetoacylCoA + C4EnoylCoAMAT_VMAT*Keqcrot*KmcrotC8EnoylCoAMAT/KmcrotC4EnoylCoAMAT + C4HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC8EnoylCoAMAT/KmcrotC4HydroxyacylCoAMAT + C6EnoylCoAMAT_VMAT*Keqcrot*KmcrotC8EnoylCoAMAT/KmcrotC6EnoylCoAMAT + C6HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC8EnoylCoAMAT/KmcrotC6HydroxyacylCoAMAT + C8EnoylCoAMAT_VMAT*Keqcrot + C8HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC8EnoylCoAMAT/KmcrotC8HydroxyacylCoAMAT + Keqcrot*KmcrotC8EnoylCoAMAT)
	fRate35() = 0.83*Vcrot/(C10EnoylCoAMAT_VMAT*KmcrotC6EnoylCoAMAT/KmcrotC10EnoylCoAMAT + C10HydroxyacylCoAMAT_VMAT*KmcrotC6EnoylCoAMAT/KmcrotC10HydroxyacylCoAMAT + C12EnoylCoAMAT_VMAT*KmcrotC6EnoylCoAMAT/KmcrotC12EnoylCoAMAT + C12HydroxyacylCoAMAT_VMAT*KmcrotC6EnoylCoAMAT/KmcrotC12HydroxyacylCoAMAT + C14EnoylCoAMAT_VMAT*KmcrotC6EnoylCoAMAT/KmcrotC14EnoylCoAMAT + C14HydroxyacylCoAMAT_VMAT*KmcrotC6EnoylCoAMAT/KmcrotC14HydroxyacylCoAMAT + C16EnoylCoAMAT_VMAT*KmcrotC6EnoylCoAMAT/KmcrotC16EnoylCoAMAT + C16HydroxyacylCoAMAT_VMAT*KmcrotC6EnoylCoAMAT/KmcrotC16HydroxyacylCoAMAT + C4AcetoacylCoAMAT_VMAT*KmcrotC6EnoylCoAMAT/KicrotC4AcetoacylCoA + C4EnoylCoAMAT_VMAT*KmcrotC6EnoylCoAMAT/KmcrotC4EnoylCoAMAT + C4HydroxyacylCoAMAT_VMAT*KmcrotC6EnoylCoAMAT/KmcrotC4HydroxyacylCoAMAT + C6EnoylCoAMAT_VMAT + C6HydroxyacylCoAMAT_VMAT*KmcrotC6EnoylCoAMAT/KmcrotC6HydroxyacylCoAMAT + C8EnoylCoAMAT_VMAT*KmcrotC6EnoylCoAMAT/KmcrotC8EnoylCoAMAT + C8HydroxyacylCoAMAT_VMAT*KmcrotC6EnoylCoAMAT/KmcrotC8HydroxyacylCoAMAT + KmcrotC6EnoylCoAMAT)
	fRate35m() = 0.83*Vcrot/(C10EnoylCoAMAT_VMAT*Keqcrot*KmcrotC6EnoylCoAMAT/KmcrotC10EnoylCoAMAT + C10HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC6EnoylCoAMAT/KmcrotC10HydroxyacylCoAMAT + C12EnoylCoAMAT_VMAT*Keqcrot*KmcrotC6EnoylCoAMAT/KmcrotC12EnoylCoAMAT + C12HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC6EnoylCoAMAT/KmcrotC12HydroxyacylCoAMAT + C14EnoylCoAMAT_VMAT*Keqcrot*KmcrotC6EnoylCoAMAT/KmcrotC14EnoylCoAMAT + C14HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC6EnoylCoAMAT/KmcrotC14HydroxyacylCoAMAT + C16EnoylCoAMAT_VMAT*Keqcrot*KmcrotC6EnoylCoAMAT/KmcrotC16EnoylCoAMAT + C16HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC6EnoylCoAMAT/KmcrotC16HydroxyacylCoAMAT + C4AcetoacylCoAMAT_VMAT*Keqcrot*KmcrotC6EnoylCoAMAT/KicrotC4AcetoacylCoA + C4EnoylCoAMAT_VMAT*Keqcrot*KmcrotC6EnoylCoAMAT/KmcrotC4EnoylCoAMAT + C4HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC6EnoylCoAMAT/KmcrotC4HydroxyacylCoAMAT + C6EnoylCoAMAT_VMAT*Keqcrot + C6HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC6EnoylCoAMAT/KmcrotC6HydroxyacylCoAMAT + C8EnoylCoAMAT_VMAT*Keqcrot*KmcrotC6EnoylCoAMAT/KmcrotC8EnoylCoAMAT + C8HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC6EnoylCoAMAT/KmcrotC8HydroxyacylCoAMAT + Keqcrot*KmcrotC6EnoylCoAMAT)
	fRate36() = 1.0*Vcrot/(C10EnoylCoAMAT_VMAT*KmcrotC4EnoylCoAMAT/KmcrotC10EnoylCoAMAT + C10HydroxyacylCoAMAT_VMAT*KmcrotC4EnoylCoAMAT/KmcrotC10HydroxyacylCoAMAT + C12EnoylCoAMAT_VMAT*KmcrotC4EnoylCoAMAT/KmcrotC12EnoylCoAMAT + C12HydroxyacylCoAMAT_VMAT*KmcrotC4EnoylCoAMAT/KmcrotC12HydroxyacylCoAMAT + C14EnoylCoAMAT_VMAT*KmcrotC4EnoylCoAMAT/KmcrotC14EnoylCoAMAT + C14HydroxyacylCoAMAT_VMAT*KmcrotC4EnoylCoAMAT/KmcrotC14HydroxyacylCoAMAT + C16EnoylCoAMAT_VMAT*KmcrotC4EnoylCoAMAT/KmcrotC16EnoylCoAMAT + C16HydroxyacylCoAMAT_VMAT*KmcrotC4EnoylCoAMAT/KmcrotC16HydroxyacylCoAMAT + C4AcetoacylCoAMAT_VMAT*KmcrotC4EnoylCoAMAT/KicrotC4AcetoacylCoA + C4EnoylCoAMAT_VMAT + C4HydroxyacylCoAMAT_VMAT*KmcrotC4EnoylCoAMAT/KmcrotC4HydroxyacylCoAMAT + C6EnoylCoAMAT_VMAT*KmcrotC4EnoylCoAMAT/KmcrotC6EnoylCoAMAT + C6HydroxyacylCoAMAT_VMAT*KmcrotC4EnoylCoAMAT/KmcrotC6HydroxyacylCoAMAT + C8EnoylCoAMAT_VMAT*KmcrotC4EnoylCoAMAT/KmcrotC8EnoylCoAMAT + C8HydroxyacylCoAMAT_VMAT*KmcrotC4EnoylCoAMAT/KmcrotC8HydroxyacylCoAMAT + KmcrotC4EnoylCoAMAT)
	fRate36m() = 1.0*Vcrot/(C10EnoylCoAMAT_VMAT*Keqcrot*KmcrotC4EnoylCoAMAT/KmcrotC10EnoylCoAMAT + C10HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC4EnoylCoAMAT/KmcrotC10HydroxyacylCoAMAT + C12EnoylCoAMAT_VMAT*Keqcrot*KmcrotC4EnoylCoAMAT/KmcrotC12EnoylCoAMAT + C12HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC4EnoylCoAMAT/KmcrotC12HydroxyacylCoAMAT + C14EnoylCoAMAT_VMAT*Keqcrot*KmcrotC4EnoylCoAMAT/KmcrotC14EnoylCoAMAT + C14HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC4EnoylCoAMAT/KmcrotC14HydroxyacylCoAMAT + C16EnoylCoAMAT_VMAT*Keqcrot*KmcrotC4EnoylCoAMAT/KmcrotC16EnoylCoAMAT + C16HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC4EnoylCoAMAT/KmcrotC16HydroxyacylCoAMAT + C4AcetoacylCoAMAT_VMAT*Keqcrot*KmcrotC4EnoylCoAMAT/KicrotC4AcetoacylCoA + C4EnoylCoAMAT_VMAT*Keqcrot + C4HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC4EnoylCoAMAT/KmcrotC4HydroxyacylCoAMAT + C6EnoylCoAMAT_VMAT*Keqcrot*KmcrotC4EnoylCoAMAT/KmcrotC6EnoylCoAMAT + C6HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC4EnoylCoAMAT/KmcrotC6HydroxyacylCoAMAT + C8EnoylCoAMAT_VMAT*Keqcrot*KmcrotC4EnoylCoAMAT/KmcrotC8EnoylCoAMAT + C8HydroxyacylCoAMAT_VMAT*Keqcrot*KmcrotC4EnoylCoAMAT/KmcrotC8HydroxyacylCoAMAT + Keqcrot*KmcrotC4EnoylCoAMAT)
	fRate37() = 0.6*Vmschad*(C16HydroxyacylCoAMAT_VMAT*(-NADHMAT_VMAT + NADtMAT_VMAT)/(KmmschadC16HydroxyacylCoAMAT*KmmschadNADMAT) - C16KetoacylCoAMAT_VMAT*NADHMAT_VMAT/(Keqmschad*KmmschadC16HydroxyacylCoAMAT*KmmschadNADMAT))/((1 + (-NADHMAT_VMAT + NADtMAT_VMAT)/KmmschadNADMAT + NADHMAT_VMAT/KmmschadNADHMAT)*(C10HydroxyacylCoAMAT_VMAT/KmmschadC10HydroxyacylCoAMAT + C10KetoacylCoAMAT_VMAT/KmmschadC10KetoacylCoAMAT + C12HydroxyacylCoAMAT_VMAT/KmmschadC12HydroxyacylCoAMAT + C12KetoacylCoAMAT_VMAT/KmmschadC12KetoacylCoAMAT + C14HydroxyacylCoAMAT_VMAT/KmmschadC14HydroxyacylCoAMAT + C14KetoacylCoAMAT_VMAT/KmmschadC14KetoacylCoAMAT + C16HydroxyacylCoAMAT_VMAT/KmmschadC16HydroxyacylCoAMAT + C16KetoacylCoAMAT_VMAT/KmmschadC16KetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT/KmmschadC4AcetoacylCoAMAT + C4HydroxyacylCoAMAT_VMAT/KmmschadC4HydroxyacylCoAMAT + C6HydroxyacylCoAMAT_VMAT/KmmschadC6HydroxyacylCoAMAT + C6KetoacylCoAMAT_VMAT/KmmschadC6KetoacylCoAMAT + C8HydroxyacylCoAMAT_VMAT/KmmschadC8HydroxyacylCoAMAT + C8KetoacylCoAMAT_VMAT/KmmschadC8KetoacylCoAMAT + 1))
	fRate38() = 0.5*Vmschad*(C14HydroxyacylCoAMAT_VMAT*(-NADHMAT_VMAT + NADtMAT_VMAT)/(KmmschadC14HydroxyacylCoAMAT*KmmschadNADMAT) - C14KetoacylCoAMAT_VMAT*NADHMAT_VMAT/(Keqmschad*KmmschadC14HydroxyacylCoAMAT*KmmschadNADMAT))/((1 + (-NADHMAT_VMAT + NADtMAT_VMAT)/KmmschadNADMAT + NADHMAT_VMAT/KmmschadNADHMAT)*(C10HydroxyacylCoAMAT_VMAT/KmmschadC10HydroxyacylCoAMAT + C10KetoacylCoAMAT_VMAT/KmmschadC10KetoacylCoAMAT + C12HydroxyacylCoAMAT_VMAT/KmmschadC12HydroxyacylCoAMAT + C12KetoacylCoAMAT_VMAT/KmmschadC12KetoacylCoAMAT + C14HydroxyacylCoAMAT_VMAT/KmmschadC14HydroxyacylCoAMAT + C14KetoacylCoAMAT_VMAT/KmmschadC14KetoacylCoAMAT + C16HydroxyacylCoAMAT_VMAT/KmmschadC16HydroxyacylCoAMAT + C16KetoacylCoAMAT_VMAT/KmmschadC16KetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT/KmmschadC4AcetoacylCoAMAT + C4HydroxyacylCoAMAT_VMAT/KmmschadC4HydroxyacylCoAMAT + C6HydroxyacylCoAMAT_VMAT/KmmschadC6HydroxyacylCoAMAT + C6KetoacylCoAMAT_VMAT/KmmschadC6KetoacylCoAMAT + C8HydroxyacylCoAMAT_VMAT/KmmschadC8HydroxyacylCoAMAT + C8KetoacylCoAMAT_VMAT/KmmschadC8KetoacylCoAMAT + 1))
	fRate39() = 0.43*Vmschad*(C12HydroxyacylCoAMAT_VMAT*(-NADHMAT_VMAT + NADtMAT_VMAT)/(KmmschadC12HydroxyacylCoAMAT*KmmschadNADMAT) - C12KetoacylCoAMAT_VMAT*NADHMAT_VMAT/(Keqmschad*KmmschadC12HydroxyacylCoAMAT*KmmschadNADMAT))/((1 + (-NADHMAT_VMAT + NADtMAT_VMAT)/KmmschadNADMAT + NADHMAT_VMAT/KmmschadNADHMAT)*(C10HydroxyacylCoAMAT_VMAT/KmmschadC10HydroxyacylCoAMAT + C10KetoacylCoAMAT_VMAT/KmmschadC10KetoacylCoAMAT + C12HydroxyacylCoAMAT_VMAT/KmmschadC12HydroxyacylCoAMAT + C12KetoacylCoAMAT_VMAT/KmmschadC12KetoacylCoAMAT + C14HydroxyacylCoAMAT_VMAT/KmmschadC14HydroxyacylCoAMAT + C14KetoacylCoAMAT_VMAT/KmmschadC14KetoacylCoAMAT + C16HydroxyacylCoAMAT_VMAT/KmmschadC16HydroxyacylCoAMAT + C16KetoacylCoAMAT_VMAT/KmmschadC16KetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT/KmmschadC4AcetoacylCoAMAT + C4HydroxyacylCoAMAT_VMAT/KmmschadC4HydroxyacylCoAMAT + C6HydroxyacylCoAMAT_VMAT/KmmschadC6HydroxyacylCoAMAT + C6KetoacylCoAMAT_VMAT/KmmschadC6KetoacylCoAMAT + C8HydroxyacylCoAMAT_VMAT/KmmschadC8HydroxyacylCoAMAT + C8KetoacylCoAMAT_VMAT/KmmschadC8KetoacylCoAMAT + 1))
	fRate40() = 0.64*Vmschad*(C10HydroxyacylCoAMAT_VMAT*(-NADHMAT_VMAT + NADtMAT_VMAT)/(KmmschadC10HydroxyacylCoAMAT*KmmschadNADMAT) - C10KetoacylCoAMAT_VMAT*NADHMAT_VMAT/(Keqmschad*KmmschadC10HydroxyacylCoAMAT*KmmschadNADMAT))/((1 + (-NADHMAT_VMAT + NADtMAT_VMAT)/KmmschadNADMAT + NADHMAT_VMAT/KmmschadNADHMAT)*(C10HydroxyacylCoAMAT_VMAT/KmmschadC10HydroxyacylCoAMAT + C10KetoacylCoAMAT_VMAT/KmmschadC10KetoacylCoAMAT + C12HydroxyacylCoAMAT_VMAT/KmmschadC12HydroxyacylCoAMAT + C12KetoacylCoAMAT_VMAT/KmmschadC12KetoacylCoAMAT + C14HydroxyacylCoAMAT_VMAT/KmmschadC14HydroxyacylCoAMAT + C14KetoacylCoAMAT_VMAT/KmmschadC14KetoacylCoAMAT + C16HydroxyacylCoAMAT_VMAT/KmmschadC16HydroxyacylCoAMAT + C16KetoacylCoAMAT_VMAT/KmmschadC16KetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT/KmmschadC4AcetoacylCoAMAT + C4HydroxyacylCoAMAT_VMAT/KmmschadC4HydroxyacylCoAMAT + C6HydroxyacylCoAMAT_VMAT/KmmschadC6HydroxyacylCoAMAT + C6KetoacylCoAMAT_VMAT/KmmschadC6KetoacylCoAMAT + C8HydroxyacylCoAMAT_VMAT/KmmschadC8HydroxyacylCoAMAT + C8KetoacylCoAMAT_VMAT/KmmschadC8KetoacylCoAMAT + 1))
	fRate41() = 0.89*Vmschad*(C8HydroxyacylCoAMAT_VMAT*(-NADHMAT_VMAT + NADtMAT_VMAT)/(KmmschadC8HydroxyacylCoAMAT*KmmschadNADMAT) - C8KetoacylCoAMAT_VMAT*NADHMAT_VMAT/(Keqmschad*KmmschadC8HydroxyacylCoAMAT*KmmschadNADMAT))/((1 + (-NADHMAT_VMAT + NADtMAT_VMAT)/KmmschadNADMAT + NADHMAT_VMAT/KmmschadNADHMAT)*(C10HydroxyacylCoAMAT_VMAT/KmmschadC10HydroxyacylCoAMAT + C10KetoacylCoAMAT_VMAT/KmmschadC10KetoacylCoAMAT + C12HydroxyacylCoAMAT_VMAT/KmmschadC12HydroxyacylCoAMAT + C12KetoacylCoAMAT_VMAT/KmmschadC12KetoacylCoAMAT + C14HydroxyacylCoAMAT_VMAT/KmmschadC14HydroxyacylCoAMAT + C14KetoacylCoAMAT_VMAT/KmmschadC14KetoacylCoAMAT + C16HydroxyacylCoAMAT_VMAT/KmmschadC16HydroxyacylCoAMAT + C16KetoacylCoAMAT_VMAT/KmmschadC16KetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT/KmmschadC4AcetoacylCoAMAT + C4HydroxyacylCoAMAT_VMAT/KmmschadC4HydroxyacylCoAMAT + C6HydroxyacylCoAMAT_VMAT/KmmschadC6HydroxyacylCoAMAT + C6KetoacylCoAMAT_VMAT/KmmschadC6KetoacylCoAMAT + C8HydroxyacylCoAMAT_VMAT/KmmschadC8HydroxyacylCoAMAT + C8KetoacylCoAMAT_VMAT/KmmschadC8KetoacylCoAMAT + 1))
	fRate42() = 1.0*Vmschad*(C6HydroxyacylCoAMAT_VMAT*(-NADHMAT_VMAT + NADtMAT_VMAT)/(KmmschadC6HydroxyacylCoAMAT*KmmschadNADMAT) - C6KetoacylCoAMAT_VMAT*NADHMAT_VMAT/(Keqmschad*KmmschadC6HydroxyacylCoAMAT*KmmschadNADMAT))/((1 + (-NADHMAT_VMAT + NADtMAT_VMAT)/KmmschadNADMAT + NADHMAT_VMAT/KmmschadNADHMAT)*(C10HydroxyacylCoAMAT_VMAT/KmmschadC10HydroxyacylCoAMAT + C10KetoacylCoAMAT_VMAT/KmmschadC10KetoacylCoAMAT + C12HydroxyacylCoAMAT_VMAT/KmmschadC12HydroxyacylCoAMAT + C12KetoacylCoAMAT_VMAT/KmmschadC12KetoacylCoAMAT + C14HydroxyacylCoAMAT_VMAT/KmmschadC14HydroxyacylCoAMAT + C14KetoacylCoAMAT_VMAT/KmmschadC14KetoacylCoAMAT + C16HydroxyacylCoAMAT_VMAT/KmmschadC16HydroxyacylCoAMAT + C16KetoacylCoAMAT_VMAT/KmmschadC16KetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT/KmmschadC4AcetoacylCoAMAT + C4HydroxyacylCoAMAT_VMAT/KmmschadC4HydroxyacylCoAMAT + C6HydroxyacylCoAMAT_VMAT/KmmschadC6HydroxyacylCoAMAT + C6KetoacylCoAMAT_VMAT/KmmschadC6KetoacylCoAMAT + C8HydroxyacylCoAMAT_VMAT/KmmschadC8HydroxyacylCoAMAT + C8KetoacylCoAMAT_VMAT/KmmschadC8KetoacylCoAMAT + 1))
	fRate43() = 0.67*Vmschad*(-C4AcetoacylCoAMAT_VMAT*NADHMAT_VMAT/(Keqmschad*KmmschadC4HydroxyacylCoAMAT*KmmschadNADMAT) + C4HydroxyacylCoAMAT_VMAT*(-NADHMAT_VMAT + NADtMAT_VMAT)/(KmmschadC4HydroxyacylCoAMAT*KmmschadNADMAT))/((1 + (-NADHMAT_VMAT + NADtMAT_VMAT)/KmmschadNADMAT + NADHMAT_VMAT/KmmschadNADHMAT)*(C10HydroxyacylCoAMAT_VMAT/KmmschadC10HydroxyacylCoAMAT + C10KetoacylCoAMAT_VMAT/KmmschadC10KetoacylCoAMAT + C12HydroxyacylCoAMAT_VMAT/KmmschadC12HydroxyacylCoAMAT + C12KetoacylCoAMAT_VMAT/KmmschadC12KetoacylCoAMAT + C14HydroxyacylCoAMAT_VMAT/KmmschadC14HydroxyacylCoAMAT + C14KetoacylCoAMAT_VMAT/KmmschadC14KetoacylCoAMAT + C16HydroxyacylCoAMAT_VMAT/KmmschadC16HydroxyacylCoAMAT + C16KetoacylCoAMAT_VMAT/KmmschadC16KetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT/KmmschadC4AcetoacylCoAMAT + C4HydroxyacylCoAMAT_VMAT/KmmschadC4HydroxyacylCoAMAT + C6HydroxyacylCoAMAT_VMAT/KmmschadC6HydroxyacylCoAMAT + C6KetoacylCoAMAT_VMAT/KmmschadC6KetoacylCoAMAT + C8HydroxyacylCoAMAT_VMAT/KmmschadC8HydroxyacylCoAMAT + C8KetoacylCoAMAT_VMAT/KmmschadC8KetoacylCoAMAT + 1))
	fRate44() = 0
	fRate44m() = 0
	fRate45() = 0.2*CoAMAT_VMAT*Vmckat/(AcetylCoAMAT_VMAT^2*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT^2 + AcetylCoAMAT_VMAT*C10AcylCoAMAT_VMAT*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC10AcylCoAMAT) + AcetylCoAMAT_VMAT*C10KetoacylCoAMAT_VMAT*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC10KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C12AcylCoAMAT_VMAT*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC12AcylCoAMAT) + AcetylCoAMAT_VMAT*C12KetoacylCoAMAT_VMAT*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC12KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C14AcylCoAMAT_VMAT*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC14AcylCoAMAT) + AcetylCoAMAT_VMAT*C14KetoacylCoAMAT_VMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT + AcetylCoAMAT_VMAT*C16AcylCoAMAT_VMAT*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC16AcylCoAMAT) + AcetylCoAMAT_VMAT*C16KetoacylCoAMAT_VMAT*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC16KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C4AcetoacylCoAMAT_VMAT*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC4AcetoacylCoAMAT) + AcetylCoAMAT_VMAT*C4AcylCoAMAT_VMAT*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC4AcylCoAMAT) + AcetylCoAMAT_VMAT*C6AcylCoAMAT_VMAT*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC6AcylCoAMAT) + AcetylCoAMAT_VMAT*C6KetoacylCoAMAT_VMAT*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC6KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C8AcylCoAMAT_VMAT*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC8AcylCoAMAT) + AcetylCoAMAT_VMAT*C8KetoacylCoAMAT_VMAT*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC8KetoacylCoAMAT) + AcetylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC14KetoacylCoAMAT/KmmckatAcetylCoAMAT + 2.0*AcetylCoAMAT_VMAT*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC14KetoacylCoAMAT/KmmckatC10AcylCoAMAT + C10AcylCoAMAT_VMAT*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC10AcylCoAMAT + C10KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC14KetoacylCoAMAT/KmmckatC10KetoacylCoAMAT + C10KetoacylCoAMAT_VMAT*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC10KetoacylCoAMAT + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC14KetoacylCoAMAT/KmmckatC12AcylCoAMAT + C12AcylCoAMAT_VMAT*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC12AcylCoAMAT + C12KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC14KetoacylCoAMAT/KmmckatC12KetoacylCoAMAT + C12KetoacylCoAMAT_VMAT*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC12KetoacylCoAMAT + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC14KetoacylCoAMAT/KmmckatC14AcylCoAMAT + C14AcylCoAMAT_VMAT*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC14AcylCoAMAT + C14KetoacylCoAMAT_VMAT*CoAMAT_VMAT + C14KetoacylCoAMAT_VMAT*KmmckatCoAMAT + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC14KetoacylCoAMAT/KmmckatC16AcylCoAMAT + C16AcylCoAMAT_VMAT*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC16AcylCoAMAT + C16KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC14KetoacylCoAMAT/KmmckatC16KetoacylCoAMAT + C16KetoacylCoAMAT_VMAT*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC16KetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC14KetoacylCoAMAT/KmmckatC4AcetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC4AcetoacylCoAMAT + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC14KetoacylCoAMAT/KmmckatC4AcylCoAMAT + C4AcylCoAMAT_VMAT*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC4AcylCoAMAT + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC14KetoacylCoAMAT/KmmckatC6AcylCoAMAT + C6AcylCoAMAT_VMAT*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC6AcylCoAMAT + C6KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC14KetoacylCoAMAT/KmmckatC6KetoacylCoAMAT + C6KetoacylCoAMAT_VMAT*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC6KetoacylCoAMAT + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC14KetoacylCoAMAT/KmmckatC8AcylCoAMAT + C8AcylCoAMAT_VMAT*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC8AcylCoAMAT + C8KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC14KetoacylCoAMAT/KmmckatC8KetoacylCoAMAT + C8KetoacylCoAMAT_VMAT*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC8KetoacylCoAMAT + CoAMAT_VMAT*KmmckatC14KetoacylCoAMAT + KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT)
	fRate45m() = 0.2*Vmckat/(AcetylCoAMAT_VMAT^2*Keqmckat*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT^2 + AcetylCoAMAT_VMAT*C10AcylCoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC10AcylCoAMAT) + AcetylCoAMAT_VMAT*C10KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC10KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C12AcylCoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC12AcylCoAMAT) + AcetylCoAMAT_VMAT*C12KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC12KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C14AcylCoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC14AcylCoAMAT) + AcetylCoAMAT_VMAT*C14KetoacylCoAMAT_VMAT*Keqmckat*KmmckatCoAMAT/KmmckatAcetylCoAMAT + AcetylCoAMAT_VMAT*C16AcylCoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC16AcylCoAMAT) + AcetylCoAMAT_VMAT*C16KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC16KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C4AcetoacylCoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC4AcetoacylCoAMAT) + AcetylCoAMAT_VMAT*C4AcylCoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC4AcylCoAMAT) + AcetylCoAMAT_VMAT*C6AcylCoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC6AcylCoAMAT) + AcetylCoAMAT_VMAT*C6KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC6KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C8AcylCoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC8AcylCoAMAT) + AcetylCoAMAT_VMAT*C8KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC8KetoacylCoAMAT) + AcetylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT/KmmckatAcetylCoAMAT + 2.0*AcetylCoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT/KmmckatC10AcylCoAMAT + C10AcylCoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC10AcylCoAMAT + C10KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT/KmmckatC10KetoacylCoAMAT + C10KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC10KetoacylCoAMAT + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT/KmmckatC12AcylCoAMAT + C12AcylCoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC12AcylCoAMAT + C12KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT/KmmckatC12KetoacylCoAMAT + C12KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC12KetoacylCoAMAT + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT/KmmckatC14AcylCoAMAT + C14AcylCoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC14AcylCoAMAT + C14KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat + C14KetoacylCoAMAT_VMAT*Keqmckat*KmmckatCoAMAT + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT/KmmckatC16AcylCoAMAT + C16AcylCoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC16AcylCoAMAT + C16KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT/KmmckatC16KetoacylCoAMAT + C16KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC16KetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT/KmmckatC4AcetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC4AcetoacylCoAMAT + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT/KmmckatC4AcylCoAMAT + C4AcylCoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC4AcylCoAMAT + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT/KmmckatC6AcylCoAMAT + C6AcylCoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC6AcylCoAMAT + C6KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT/KmmckatC6KetoacylCoAMAT + C6KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC6KetoacylCoAMAT + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT/KmmckatC8AcylCoAMAT + C8AcylCoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC8AcylCoAMAT + C8KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT/KmmckatC8KetoacylCoAMAT + C8KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC8KetoacylCoAMAT + CoAMAT_VMAT*Keqmckat*KmmckatC14KetoacylCoAMAT + Keqmckat*KmmckatC14KetoacylCoAMAT*KmmckatCoAMAT)
	fRate46() = 0.38*CoAMAT_VMAT*Vmckat/(AcetylCoAMAT_VMAT^2*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT^2 + AcetylCoAMAT_VMAT*C10AcylCoAMAT_VMAT*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC10AcylCoAMAT) + AcetylCoAMAT_VMAT*C10KetoacylCoAMAT_VMAT*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC10KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C12AcylCoAMAT_VMAT*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC12AcylCoAMAT) + AcetylCoAMAT_VMAT*C12KetoacylCoAMAT_VMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT + AcetylCoAMAT_VMAT*C14AcylCoAMAT_VMAT*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC14AcylCoAMAT) + AcetylCoAMAT_VMAT*C14KetoacylCoAMAT_VMAT*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC14KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C16AcylCoAMAT_VMAT*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC16AcylCoAMAT) + AcetylCoAMAT_VMAT*C16KetoacylCoAMAT_VMAT*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC16KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C4AcetoacylCoAMAT_VMAT*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC4AcetoacylCoAMAT) + AcetylCoAMAT_VMAT*C4AcylCoAMAT_VMAT*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC4AcylCoAMAT) + AcetylCoAMAT_VMAT*C6AcylCoAMAT_VMAT*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC6AcylCoAMAT) + AcetylCoAMAT_VMAT*C6KetoacylCoAMAT_VMAT*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC6KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C8AcylCoAMAT_VMAT*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC8AcylCoAMAT) + AcetylCoAMAT_VMAT*C8KetoacylCoAMAT_VMAT*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC8KetoacylCoAMAT) + AcetylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC12KetoacylCoAMAT/KmmckatAcetylCoAMAT + 2.0*AcetylCoAMAT_VMAT*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC12KetoacylCoAMAT/KmmckatC10AcylCoAMAT + C10AcylCoAMAT_VMAT*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC10AcylCoAMAT + C10KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC12KetoacylCoAMAT/KmmckatC10KetoacylCoAMAT + C10KetoacylCoAMAT_VMAT*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC10KetoacylCoAMAT + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC12KetoacylCoAMAT/KmmckatC12AcylCoAMAT + C12AcylCoAMAT_VMAT*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC12AcylCoAMAT + C12KetoacylCoAMAT_VMAT*CoAMAT_VMAT + C12KetoacylCoAMAT_VMAT*KmmckatCoAMAT + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC12KetoacylCoAMAT/KmmckatC14AcylCoAMAT + C14AcylCoAMAT_VMAT*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC14AcylCoAMAT + C14KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC12KetoacylCoAMAT/KmmckatC14KetoacylCoAMAT + C14KetoacylCoAMAT_VMAT*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC14KetoacylCoAMAT + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC12KetoacylCoAMAT/KmmckatC16AcylCoAMAT + C16AcylCoAMAT_VMAT*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC16AcylCoAMAT + C16KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC12KetoacylCoAMAT/KmmckatC16KetoacylCoAMAT + C16KetoacylCoAMAT_VMAT*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC16KetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC12KetoacylCoAMAT/KmmckatC4AcetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC4AcetoacylCoAMAT + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC12KetoacylCoAMAT/KmmckatC4AcylCoAMAT + C4AcylCoAMAT_VMAT*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC4AcylCoAMAT + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC12KetoacylCoAMAT/KmmckatC6AcylCoAMAT + C6AcylCoAMAT_VMAT*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC6AcylCoAMAT + C6KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC12KetoacylCoAMAT/KmmckatC6KetoacylCoAMAT + C6KetoacylCoAMAT_VMAT*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC6KetoacylCoAMAT + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC12KetoacylCoAMAT/KmmckatC8AcylCoAMAT + C8AcylCoAMAT_VMAT*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC8AcylCoAMAT + C8KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC12KetoacylCoAMAT/KmmckatC8KetoacylCoAMAT + C8KetoacylCoAMAT_VMAT*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC8KetoacylCoAMAT + CoAMAT_VMAT*KmmckatC12KetoacylCoAMAT + KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT)
	fRate46m() = 0.38*Vmckat/(AcetylCoAMAT_VMAT^2*Keqmckat*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT^2 + AcetylCoAMAT_VMAT*C10AcylCoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC10AcylCoAMAT) + AcetylCoAMAT_VMAT*C10KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC10KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C12AcylCoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC12AcylCoAMAT) + AcetylCoAMAT_VMAT*C12KetoacylCoAMAT_VMAT*Keqmckat*KmmckatCoAMAT/KmmckatAcetylCoAMAT + AcetylCoAMAT_VMAT*C14AcylCoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC14AcylCoAMAT) + AcetylCoAMAT_VMAT*C14KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC14KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C16AcylCoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC16AcylCoAMAT) + AcetylCoAMAT_VMAT*C16KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC16KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C4AcetoacylCoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC4AcetoacylCoAMAT) + AcetylCoAMAT_VMAT*C4AcylCoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC4AcylCoAMAT) + AcetylCoAMAT_VMAT*C6AcylCoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC6AcylCoAMAT) + AcetylCoAMAT_VMAT*C6KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC6KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C8AcylCoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC8AcylCoAMAT) + AcetylCoAMAT_VMAT*C8KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC8KetoacylCoAMAT) + AcetylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT/KmmckatAcetylCoAMAT + 2.0*AcetylCoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT/KmmckatC10AcylCoAMAT + C10AcylCoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC10AcylCoAMAT + C10KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT/KmmckatC10KetoacylCoAMAT + C10KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC10KetoacylCoAMAT + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT/KmmckatC12AcylCoAMAT + C12AcylCoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC12AcylCoAMAT + C12KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat + C12KetoacylCoAMAT_VMAT*Keqmckat*KmmckatCoAMAT + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT/KmmckatC14AcylCoAMAT + C14AcylCoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC14AcylCoAMAT + C14KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT/KmmckatC14KetoacylCoAMAT + C14KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC14KetoacylCoAMAT + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT/KmmckatC16AcylCoAMAT + C16AcylCoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC16AcylCoAMAT + C16KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT/KmmckatC16KetoacylCoAMAT + C16KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC16KetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT/KmmckatC4AcetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC4AcetoacylCoAMAT + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT/KmmckatC4AcylCoAMAT + C4AcylCoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC4AcylCoAMAT + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT/KmmckatC6AcylCoAMAT + C6AcylCoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC6AcylCoAMAT + C6KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT/KmmckatC6KetoacylCoAMAT + C6KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC6KetoacylCoAMAT + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT/KmmckatC8AcylCoAMAT + C8AcylCoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC8AcylCoAMAT + C8KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT/KmmckatC8KetoacylCoAMAT + C8KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC8KetoacylCoAMAT + CoAMAT_VMAT*Keqmckat*KmmckatC12KetoacylCoAMAT + Keqmckat*KmmckatC12KetoacylCoAMAT*KmmckatCoAMAT)
	fRate47() = 0.65*CoAMAT_VMAT*Vmckat/(AcetylCoAMAT_VMAT^2*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT^2 + AcetylCoAMAT_VMAT*C10AcylCoAMAT_VMAT*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC10AcylCoAMAT) + AcetylCoAMAT_VMAT*C10KetoacylCoAMAT_VMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT + AcetylCoAMAT_VMAT*C12AcylCoAMAT_VMAT*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC12AcylCoAMAT) + AcetylCoAMAT_VMAT*C12KetoacylCoAMAT_VMAT*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC12KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C14AcylCoAMAT_VMAT*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC14AcylCoAMAT) + AcetylCoAMAT_VMAT*C14KetoacylCoAMAT_VMAT*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC14KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C16AcylCoAMAT_VMAT*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC16AcylCoAMAT) + AcetylCoAMAT_VMAT*C16KetoacylCoAMAT_VMAT*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC16KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C4AcetoacylCoAMAT_VMAT*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC4AcetoacylCoAMAT) + AcetylCoAMAT_VMAT*C4AcylCoAMAT_VMAT*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC4AcylCoAMAT) + AcetylCoAMAT_VMAT*C6AcylCoAMAT_VMAT*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC6AcylCoAMAT) + AcetylCoAMAT_VMAT*C6KetoacylCoAMAT_VMAT*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC6KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C8AcylCoAMAT_VMAT*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC8AcylCoAMAT) + AcetylCoAMAT_VMAT*C8KetoacylCoAMAT_VMAT*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC8KetoacylCoAMAT) + AcetylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC10KetoacylCoAMAT/KmmckatAcetylCoAMAT + 2.0*AcetylCoAMAT_VMAT*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC10KetoacylCoAMAT/KmmckatC10AcylCoAMAT + C10AcylCoAMAT_VMAT*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC10AcylCoAMAT + C10KetoacylCoAMAT_VMAT*CoAMAT_VMAT + C10KetoacylCoAMAT_VMAT*KmmckatCoAMAT + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC10KetoacylCoAMAT/KmmckatC12AcylCoAMAT + C12AcylCoAMAT_VMAT*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC12AcylCoAMAT + C12KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC10KetoacylCoAMAT/KmmckatC12KetoacylCoAMAT + C12KetoacylCoAMAT_VMAT*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC12KetoacylCoAMAT + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC10KetoacylCoAMAT/KmmckatC14AcylCoAMAT + C14AcylCoAMAT_VMAT*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC14AcylCoAMAT + C14KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC10KetoacylCoAMAT/KmmckatC14KetoacylCoAMAT + C14KetoacylCoAMAT_VMAT*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC14KetoacylCoAMAT + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC10KetoacylCoAMAT/KmmckatC16AcylCoAMAT + C16AcylCoAMAT_VMAT*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC16AcylCoAMAT + C16KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC10KetoacylCoAMAT/KmmckatC16KetoacylCoAMAT + C16KetoacylCoAMAT_VMAT*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC16KetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC10KetoacylCoAMAT/KmmckatC4AcetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC4AcetoacylCoAMAT + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC10KetoacylCoAMAT/KmmckatC4AcylCoAMAT + C4AcylCoAMAT_VMAT*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC4AcylCoAMAT + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC10KetoacylCoAMAT/KmmckatC6AcylCoAMAT + C6AcylCoAMAT_VMAT*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC6AcylCoAMAT + C6KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC10KetoacylCoAMAT/KmmckatC6KetoacylCoAMAT + C6KetoacylCoAMAT_VMAT*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC6KetoacylCoAMAT + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC10KetoacylCoAMAT/KmmckatC8AcylCoAMAT + C8AcylCoAMAT_VMAT*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC8AcylCoAMAT + C8KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC10KetoacylCoAMAT/KmmckatC8KetoacylCoAMAT + C8KetoacylCoAMAT_VMAT*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC8KetoacylCoAMAT + CoAMAT_VMAT*KmmckatC10KetoacylCoAMAT + KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT)
	fRate47m() = 0.65*Vmckat/(AcetylCoAMAT_VMAT^2*Keqmckat*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT^2 + AcetylCoAMAT_VMAT*C10AcylCoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC10AcylCoAMAT) + AcetylCoAMAT_VMAT*C10KetoacylCoAMAT_VMAT*Keqmckat*KmmckatCoAMAT/KmmckatAcetylCoAMAT + AcetylCoAMAT_VMAT*C12AcylCoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC12AcylCoAMAT) + AcetylCoAMAT_VMAT*C12KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC12KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C14AcylCoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC14AcylCoAMAT) + AcetylCoAMAT_VMAT*C14KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC14KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C16AcylCoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC16AcylCoAMAT) + AcetylCoAMAT_VMAT*C16KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC16KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C4AcetoacylCoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC4AcetoacylCoAMAT) + AcetylCoAMAT_VMAT*C4AcylCoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC4AcylCoAMAT) + AcetylCoAMAT_VMAT*C6AcylCoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC6AcylCoAMAT) + AcetylCoAMAT_VMAT*C6KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC6KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C8AcylCoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC8AcylCoAMAT) + AcetylCoAMAT_VMAT*C8KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC8KetoacylCoAMAT) + AcetylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT/KmmckatAcetylCoAMAT + 2.0*AcetylCoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT/KmmckatC10AcylCoAMAT + C10AcylCoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC10AcylCoAMAT + C10KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat + C10KetoacylCoAMAT_VMAT*Keqmckat*KmmckatCoAMAT + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT/KmmckatC12AcylCoAMAT + C12AcylCoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC12AcylCoAMAT + C12KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT/KmmckatC12KetoacylCoAMAT + C12KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC12KetoacylCoAMAT + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT/KmmckatC14AcylCoAMAT + C14AcylCoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC14AcylCoAMAT + C14KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT/KmmckatC14KetoacylCoAMAT + C14KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC14KetoacylCoAMAT + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT/KmmckatC16AcylCoAMAT + C16AcylCoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC16AcylCoAMAT + C16KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT/KmmckatC16KetoacylCoAMAT + C16KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC16KetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT/KmmckatC4AcetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC4AcetoacylCoAMAT + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT/KmmckatC4AcylCoAMAT + C4AcylCoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC4AcylCoAMAT + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT/KmmckatC6AcylCoAMAT + C6AcylCoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC6AcylCoAMAT + C6KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT/KmmckatC6KetoacylCoAMAT + C6KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC6KetoacylCoAMAT + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT/KmmckatC8AcylCoAMAT + C8AcylCoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC8AcylCoAMAT + C8KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT/KmmckatC8KetoacylCoAMAT + C8KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC8KetoacylCoAMAT + CoAMAT_VMAT*Keqmckat*KmmckatC10KetoacylCoAMAT + Keqmckat*KmmckatC10KetoacylCoAMAT*KmmckatCoAMAT)
	fRate48() = 0.81*CoAMAT_VMAT*Vmckat/(AcetylCoAMAT_VMAT^2*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT^2 + AcetylCoAMAT_VMAT*C10AcylCoAMAT_VMAT*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC10AcylCoAMAT) + AcetylCoAMAT_VMAT*C10KetoacylCoAMAT_VMAT*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC10KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C12AcylCoAMAT_VMAT*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC12AcylCoAMAT) + AcetylCoAMAT_VMAT*C12KetoacylCoAMAT_VMAT*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC12KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C14AcylCoAMAT_VMAT*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC14AcylCoAMAT) + AcetylCoAMAT_VMAT*C14KetoacylCoAMAT_VMAT*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC14KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C16AcylCoAMAT_VMAT*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC16AcylCoAMAT) + AcetylCoAMAT_VMAT*C16KetoacylCoAMAT_VMAT*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC16KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C4AcetoacylCoAMAT_VMAT*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC4AcetoacylCoAMAT) + AcetylCoAMAT_VMAT*C4AcylCoAMAT_VMAT*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC4AcylCoAMAT) + AcetylCoAMAT_VMAT*C6AcylCoAMAT_VMAT*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC6AcylCoAMAT) + AcetylCoAMAT_VMAT*C6KetoacylCoAMAT_VMAT*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC6KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C8AcylCoAMAT_VMAT*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC8AcylCoAMAT) + AcetylCoAMAT_VMAT*C8KetoacylCoAMAT_VMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT + AcetylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC8KetoacylCoAMAT/KmmckatAcetylCoAMAT + 2.0*AcetylCoAMAT_VMAT*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC8KetoacylCoAMAT/KmmckatC10AcylCoAMAT + C10AcylCoAMAT_VMAT*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC10AcylCoAMAT + C10KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC8KetoacylCoAMAT/KmmckatC10KetoacylCoAMAT + C10KetoacylCoAMAT_VMAT*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC10KetoacylCoAMAT + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC8KetoacylCoAMAT/KmmckatC12AcylCoAMAT + C12AcylCoAMAT_VMAT*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC12AcylCoAMAT + C12KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC8KetoacylCoAMAT/KmmckatC12KetoacylCoAMAT + C12KetoacylCoAMAT_VMAT*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC12KetoacylCoAMAT + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC8KetoacylCoAMAT/KmmckatC14AcylCoAMAT + C14AcylCoAMAT_VMAT*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC14AcylCoAMAT + C14KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC8KetoacylCoAMAT/KmmckatC14KetoacylCoAMAT + C14KetoacylCoAMAT_VMAT*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC14KetoacylCoAMAT + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC8KetoacylCoAMAT/KmmckatC16AcylCoAMAT + C16AcylCoAMAT_VMAT*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC16AcylCoAMAT + C16KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC8KetoacylCoAMAT/KmmckatC16KetoacylCoAMAT + C16KetoacylCoAMAT_VMAT*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC16KetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC8KetoacylCoAMAT/KmmckatC4AcetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC4AcetoacylCoAMAT + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC8KetoacylCoAMAT/KmmckatC4AcylCoAMAT + C4AcylCoAMAT_VMAT*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC4AcylCoAMAT + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC8KetoacylCoAMAT/KmmckatC6AcylCoAMAT + C6AcylCoAMAT_VMAT*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC6AcylCoAMAT + C6KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC8KetoacylCoAMAT/KmmckatC6KetoacylCoAMAT + C6KetoacylCoAMAT_VMAT*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC6KetoacylCoAMAT + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC8KetoacylCoAMAT/KmmckatC8AcylCoAMAT + C8AcylCoAMAT_VMAT*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC8AcylCoAMAT + C8KetoacylCoAMAT_VMAT*CoAMAT_VMAT + C8KetoacylCoAMAT_VMAT*KmmckatCoAMAT + CoAMAT_VMAT*KmmckatC8KetoacylCoAMAT + KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT)
	fRate48m() = 0.81*Vmckat/(AcetylCoAMAT_VMAT^2*Keqmckat*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT^2 + AcetylCoAMAT_VMAT*C10AcylCoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC10AcylCoAMAT) + AcetylCoAMAT_VMAT*C10KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC10KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C12AcylCoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC12AcylCoAMAT) + AcetylCoAMAT_VMAT*C12KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC12KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C14AcylCoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC14AcylCoAMAT) + AcetylCoAMAT_VMAT*C14KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC14KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C16AcylCoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC16AcylCoAMAT) + AcetylCoAMAT_VMAT*C16KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC16KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C4AcetoacylCoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC4AcetoacylCoAMAT) + AcetylCoAMAT_VMAT*C4AcylCoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC4AcylCoAMAT) + AcetylCoAMAT_VMAT*C6AcylCoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC6AcylCoAMAT) + AcetylCoAMAT_VMAT*C6KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC6KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C8AcylCoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC8AcylCoAMAT) + AcetylCoAMAT_VMAT*C8KetoacylCoAMAT_VMAT*Keqmckat*KmmckatCoAMAT/KmmckatAcetylCoAMAT + AcetylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT/KmmckatAcetylCoAMAT + 2.0*AcetylCoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT/KmmckatC10AcylCoAMAT + C10AcylCoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC10AcylCoAMAT + C10KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT/KmmckatC10KetoacylCoAMAT + C10KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC10KetoacylCoAMAT + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT/KmmckatC12AcylCoAMAT + C12AcylCoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC12AcylCoAMAT + C12KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT/KmmckatC12KetoacylCoAMAT + C12KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC12KetoacylCoAMAT + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT/KmmckatC14AcylCoAMAT + C14AcylCoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC14AcylCoAMAT + C14KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT/KmmckatC14KetoacylCoAMAT + C14KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC14KetoacylCoAMAT + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT/KmmckatC16AcylCoAMAT + C16AcylCoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC16AcylCoAMAT + C16KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT/KmmckatC16KetoacylCoAMAT + C16KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC16KetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT/KmmckatC4AcetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC4AcetoacylCoAMAT + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT/KmmckatC4AcylCoAMAT + C4AcylCoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC4AcylCoAMAT + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT/KmmckatC6AcylCoAMAT + C6AcylCoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC6AcylCoAMAT + C6KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT/KmmckatC6KetoacylCoAMAT + C6KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC6KetoacylCoAMAT + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT/KmmckatC8AcylCoAMAT + C8AcylCoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC8AcylCoAMAT + C8KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat + C8KetoacylCoAMAT_VMAT*Keqmckat*KmmckatCoAMAT + CoAMAT_VMAT*Keqmckat*KmmckatC8KetoacylCoAMAT + Keqmckat*KmmckatC8KetoacylCoAMAT*KmmckatCoAMAT)
	fRate49() = 1.0*CoAMAT_VMAT*Vmckat/(AcetylCoAMAT_VMAT^2*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT^2 + AcetylCoAMAT_VMAT*C10AcylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC10AcylCoAMAT) + AcetylCoAMAT_VMAT*C10KetoacylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC10KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C12AcylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC12AcylCoAMAT) + AcetylCoAMAT_VMAT*C12KetoacylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC12KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C14AcylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC14AcylCoAMAT) + AcetylCoAMAT_VMAT*C14KetoacylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC14KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C16AcylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC16AcylCoAMAT) + AcetylCoAMAT_VMAT*C16KetoacylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC16KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C4AcetoacylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC4AcetoacylCoAMAT) + AcetylCoAMAT_VMAT*C4AcylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC4AcylCoAMAT) + AcetylCoAMAT_VMAT*C6AcylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC6AcylCoAMAT) + AcetylCoAMAT_VMAT*C6KetoacylCoAMAT_VMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT + AcetylCoAMAT_VMAT*C8AcylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC8AcylCoAMAT) + AcetylCoAMAT_VMAT*C8KetoacylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC8KetoacylCoAMAT) + AcetylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC6KetoacylCoAMAT/KmmckatAcetylCoAMAT + 2.0*AcetylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC6KetoacylCoAMAT/KmmckatC10AcylCoAMAT + C10AcylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC10AcylCoAMAT + C10KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC6KetoacylCoAMAT/KmmckatC10KetoacylCoAMAT + C10KetoacylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC10KetoacylCoAMAT + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC6KetoacylCoAMAT/KmmckatC12AcylCoAMAT + C12AcylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC12AcylCoAMAT + C12KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC6KetoacylCoAMAT/KmmckatC12KetoacylCoAMAT + C12KetoacylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC12KetoacylCoAMAT + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC6KetoacylCoAMAT/KmmckatC14AcylCoAMAT + C14AcylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC14AcylCoAMAT + C14KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC6KetoacylCoAMAT/KmmckatC14KetoacylCoAMAT + C14KetoacylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC14KetoacylCoAMAT + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC6KetoacylCoAMAT/KmmckatC16AcylCoAMAT + C16AcylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC16AcylCoAMAT + C16KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC6KetoacylCoAMAT/KmmckatC16KetoacylCoAMAT + C16KetoacylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC16KetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC6KetoacylCoAMAT/KmmckatC4AcetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC4AcetoacylCoAMAT + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC6KetoacylCoAMAT/KmmckatC4AcylCoAMAT + C4AcylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC4AcylCoAMAT + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC6KetoacylCoAMAT/KmmckatC6AcylCoAMAT + C6AcylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC6AcylCoAMAT + C6KetoacylCoAMAT_VMAT*CoAMAT_VMAT + C6KetoacylCoAMAT_VMAT*KmmckatCoAMAT + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC6KetoacylCoAMAT/KmmckatC8AcylCoAMAT + C8AcylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC8AcylCoAMAT + C8KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC6KetoacylCoAMAT/KmmckatC8KetoacylCoAMAT + C8KetoacylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC8KetoacylCoAMAT + CoAMAT_VMAT*KmmckatC6KetoacylCoAMAT + KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT)
	fRate49m() = 1.0*Vmckat/(AcetylCoAMAT_VMAT^2*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT^2 + AcetylCoAMAT_VMAT*C10AcylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC10AcylCoAMAT) + AcetylCoAMAT_VMAT*C10KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC10KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C12AcylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC12AcylCoAMAT) + AcetylCoAMAT_VMAT*C12KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC12KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C14AcylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC14AcylCoAMAT) + AcetylCoAMAT_VMAT*C14KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC14KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C16AcylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC16AcylCoAMAT) + AcetylCoAMAT_VMAT*C16KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC16KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C4AcetoacylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC4AcetoacylCoAMAT) + AcetylCoAMAT_VMAT*C4AcylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC4AcylCoAMAT) + AcetylCoAMAT_VMAT*C6AcylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC6AcylCoAMAT) + AcetylCoAMAT_VMAT*C6KetoacylCoAMAT_VMAT*Keqmckat*KmmckatCoAMAT/KmmckatAcetylCoAMAT + AcetylCoAMAT_VMAT*C8AcylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC8AcylCoAMAT) + AcetylCoAMAT_VMAT*C8KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC8KetoacylCoAMAT) + AcetylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT/KmmckatAcetylCoAMAT + 2.0*AcetylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT/KmmckatC10AcylCoAMAT + C10AcylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC10AcylCoAMAT + C10KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT/KmmckatC10KetoacylCoAMAT + C10KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC10KetoacylCoAMAT + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT/KmmckatC12AcylCoAMAT + C12AcylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC12AcylCoAMAT + C12KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT/KmmckatC12KetoacylCoAMAT + C12KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC12KetoacylCoAMAT + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT/KmmckatC14AcylCoAMAT + C14AcylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC14AcylCoAMAT + C14KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT/KmmckatC14KetoacylCoAMAT + C14KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC14KetoacylCoAMAT + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT/KmmckatC16AcylCoAMAT + C16AcylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC16AcylCoAMAT + C16KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT/KmmckatC16KetoacylCoAMAT + C16KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC16KetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT/KmmckatC4AcetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC4AcetoacylCoAMAT + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT/KmmckatC4AcylCoAMAT + C4AcylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC4AcylCoAMAT + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT/KmmckatC6AcylCoAMAT + C6AcylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC6AcylCoAMAT + C6KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat + C6KetoacylCoAMAT_VMAT*Keqmckat*KmmckatCoAMAT + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT/KmmckatC8AcylCoAMAT + C8AcylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC8AcylCoAMAT + C8KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT/KmmckatC8KetoacylCoAMAT + C8KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC8KetoacylCoAMAT + CoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT + Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT)
	fRate50() = 0.49*CoAMAT_VMAT*Vmckat/(AcetylCoAMAT_VMAT^2*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT^2 + AcetylCoAMAT_VMAT*C10AcylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC10AcylCoAMAT) + AcetylCoAMAT_VMAT*C10KetoacylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC10KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C12AcylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC12AcylCoAMAT) + AcetylCoAMAT_VMAT*C12KetoacylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC12KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C14AcylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC14AcylCoAMAT) + AcetylCoAMAT_VMAT*C14KetoacylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC14KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C16AcylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC16AcylCoAMAT) + AcetylCoAMAT_VMAT*C16KetoacylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC16KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C4AcetoacylCoAMAT_VMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT + AcetylCoAMAT_VMAT*C4AcylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC4AcylCoAMAT) + AcetylCoAMAT_VMAT*C6AcylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC6AcylCoAMAT) + AcetylCoAMAT_VMAT*C6KetoacylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC6KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C8AcylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC8AcylCoAMAT) + AcetylCoAMAT_VMAT*C8KetoacylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC8KetoacylCoAMAT) + AcetylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT/KmmckatAcetylCoAMAT + 2.0*AcetylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT/KmmckatC10AcylCoAMAT + C10AcylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC10AcylCoAMAT + C10KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT/KmmckatC10KetoacylCoAMAT + C10KetoacylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC10KetoacylCoAMAT + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT/KmmckatC12AcylCoAMAT + C12AcylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC12AcylCoAMAT + C12KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT/KmmckatC12KetoacylCoAMAT + C12KetoacylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC12KetoacylCoAMAT + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT/KmmckatC14AcylCoAMAT + C14AcylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC14AcylCoAMAT + C14KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT/KmmckatC14KetoacylCoAMAT + C14KetoacylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC14KetoacylCoAMAT + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT/KmmckatC16AcylCoAMAT + C16AcylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC16AcylCoAMAT + C16KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT/KmmckatC16KetoacylCoAMAT + C16KetoacylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC16KetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT*CoAMAT_VMAT + C4AcetoacylCoAMAT_VMAT*KmmckatCoAMAT + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT/KmmckatC4AcylCoAMAT + C4AcylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC4AcylCoAMAT + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT/KmmckatC6AcylCoAMAT + C6AcylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC6AcylCoAMAT + C6KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT/KmmckatC6KetoacylCoAMAT + C6KetoacylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC6KetoacylCoAMAT + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT/KmmckatC8AcylCoAMAT + C8AcylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC8AcylCoAMAT + C8KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT/KmmckatC8KetoacylCoAMAT + C8KetoacylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC8KetoacylCoAMAT + CoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT + KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT)
	fRate50m() = 0.49*Vmckat/(AcetylCoAMAT_VMAT^2*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT^2 + AcetylCoAMAT_VMAT*C10AcylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC10AcylCoAMAT) + AcetylCoAMAT_VMAT*C10KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC10KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C12AcylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC12AcylCoAMAT) + AcetylCoAMAT_VMAT*C12KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC12KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C14AcylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC14AcylCoAMAT) + AcetylCoAMAT_VMAT*C14KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC14KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C16AcylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC16AcylCoAMAT) + AcetylCoAMAT_VMAT*C16KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC16KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C4AcetoacylCoAMAT_VMAT*Keqmckat*KmmckatCoAMAT/KmmckatAcetylCoAMAT + AcetylCoAMAT_VMAT*C4AcylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC4AcylCoAMAT) + AcetylCoAMAT_VMAT*C6AcylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC6AcylCoAMAT) + AcetylCoAMAT_VMAT*C6KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC6KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C8AcylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC8AcylCoAMAT) + AcetylCoAMAT_VMAT*C8KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC8KetoacylCoAMAT) + AcetylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT/KmmckatAcetylCoAMAT + 2.0*AcetylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT/KmmckatC10AcylCoAMAT + C10AcylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC10AcylCoAMAT + C10KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT/KmmckatC10KetoacylCoAMAT + C10KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC10KetoacylCoAMAT + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT/KmmckatC12AcylCoAMAT + C12AcylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC12AcylCoAMAT + C12KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT/KmmckatC12KetoacylCoAMAT + C12KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC12KetoacylCoAMAT + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT/KmmckatC14AcylCoAMAT + C14AcylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC14AcylCoAMAT + C14KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT/KmmckatC14KetoacylCoAMAT + C14KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC14KetoacylCoAMAT + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT/KmmckatC16AcylCoAMAT + C16AcylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC16AcylCoAMAT + C16KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT/KmmckatC16KetoacylCoAMAT + C16KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC16KetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat + C4AcetoacylCoAMAT_VMAT*Keqmckat*KmmckatCoAMAT + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT/KmmckatC4AcylCoAMAT + C4AcylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC4AcylCoAMAT + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT/KmmckatC6AcylCoAMAT + C6AcylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC6AcylCoAMAT + C6KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT/KmmckatC6KetoacylCoAMAT + C6KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC6KetoacylCoAMAT + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT/KmmckatC8AcylCoAMAT + C8AcylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC8AcylCoAMAT + C8KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT/KmmckatC8KetoacylCoAMAT + C8KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC8KetoacylCoAMAT + CoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT + Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT)
	fRate51() = 1.0*Vmtp*(-AcetylCoAMAT_VMAT*C14AcylCoAMAT_VMAT*NADHMAT_VMAT/(Keqmtp*KmmtpC16EnoylCoAMAT*KmmtpCoAMAT*KmmtpNADMAT) + C16EnoylCoAMAT_VMAT*CoAMAT_VMAT*(-NADHMAT_VMAT + NADtMAT_VMAT)/(KmmtpC16EnoylCoAMAT*KmmtpCoAMAT*KmmtpNADMAT))/((1 + (-NADHMAT_VMAT + NADtMAT_VMAT)/KmmtpNADMAT + NADHMAT_VMAT/KmmtpNADHMAT)*(AcetylCoAMAT_VMAT/KmmtpAcetylCoAMAT + CoAMAT_VMAT/KmmtpCoAMAT + 1)*(C10AcylCoAMAT_VMAT/KmmtpC10AcylCoAMAT + C10EnoylCoAMAT_VMAT/KmmtpC10EnoylCoAMAT + C12AcylCoAMAT_VMAT/KmmtpC12AcylCoAMAT + C12EnoylCoAMAT_VMAT/KmmtpC12EnoylCoAMAT + C14AcylCoAMAT_VMAT/KmmtpC14AcylCoAMAT + C14EnoylCoAMAT_VMAT/KmmtpC14EnoylCoAMAT + C16AcylCoAMAT_VMAT/KmmtpC16AcylCoAMAT + C16EnoylCoAMAT_VMAT/KmmtpC16EnoylCoAMAT + C4AcetoacylCoAMAT_VMAT/KicrotC4AcetoacylCoA + C6AcylCoAMAT_VMAT/KmmtpC6AcylCoAMAT + C8AcylCoAMAT_VMAT/KmmtpC8AcylCoAMAT + C8EnoylCoAMAT_VMAT/KmmtpC8EnoylCoAMAT + 1))
	fRate52() = 0.9*Vmtp*(-AcetylCoAMAT_VMAT*C12AcylCoAMAT_VMAT*NADHMAT_VMAT/(Keqmtp*KmmtpC14EnoylCoAMAT*KmmtpCoAMAT*KmmtpNADMAT) + C14EnoylCoAMAT_VMAT*CoAMAT_VMAT*(-NADHMAT_VMAT + NADtMAT_VMAT)/(KmmtpC14EnoylCoAMAT*KmmtpCoAMAT*KmmtpNADMAT))/((1 + (-NADHMAT_VMAT + NADtMAT_VMAT)/KmmtpNADMAT + NADHMAT_VMAT/KmmtpNADHMAT)*(AcetylCoAMAT_VMAT/KmmtpAcetylCoAMAT + CoAMAT_VMAT/KmmtpCoAMAT + 1)*(C10AcylCoAMAT_VMAT/KmmtpC10AcylCoAMAT + C10EnoylCoAMAT_VMAT/KmmtpC10EnoylCoAMAT + C12AcylCoAMAT_VMAT/KmmtpC12AcylCoAMAT + C12EnoylCoAMAT_VMAT/KmmtpC12EnoylCoAMAT + C14AcylCoAMAT_VMAT/KmmtpC14AcylCoAMAT + C14EnoylCoAMAT_VMAT/KmmtpC14EnoylCoAMAT + C16AcylCoAMAT_VMAT/KmmtpC16AcylCoAMAT + C16EnoylCoAMAT_VMAT/KmmtpC16EnoylCoAMAT + C4AcetoacylCoAMAT_VMAT/KicrotC4AcetoacylCoA + C6AcylCoAMAT_VMAT/KmmtpC6AcylCoAMAT + C8AcylCoAMAT_VMAT/KmmtpC8AcylCoAMAT + C8EnoylCoAMAT_VMAT/KmmtpC8EnoylCoAMAT + 1))
	fRate53() = 0.81*Vmtp*(-AcetylCoAMAT_VMAT*C10AcylCoAMAT_VMAT*NADHMAT_VMAT/(Keqmtp*KmmtpC12EnoylCoAMAT*KmmtpCoAMAT*KmmtpNADMAT) + C12EnoylCoAMAT_VMAT*CoAMAT_VMAT*(-NADHMAT_VMAT + NADtMAT_VMAT)/(KmmtpC12EnoylCoAMAT*KmmtpCoAMAT*KmmtpNADMAT))/((1 + (-NADHMAT_VMAT + NADtMAT_VMAT)/KmmtpNADMAT + NADHMAT_VMAT/KmmtpNADHMAT)*(AcetylCoAMAT_VMAT/KmmtpAcetylCoAMAT + CoAMAT_VMAT/KmmtpCoAMAT + 1)*(C10AcylCoAMAT_VMAT/KmmtpC10AcylCoAMAT + C10EnoylCoAMAT_VMAT/KmmtpC10EnoylCoAMAT + C12AcylCoAMAT_VMAT/KmmtpC12AcylCoAMAT + C12EnoylCoAMAT_VMAT/KmmtpC12EnoylCoAMAT + C14AcylCoAMAT_VMAT/KmmtpC14AcylCoAMAT + C14EnoylCoAMAT_VMAT/KmmtpC14EnoylCoAMAT + C16AcylCoAMAT_VMAT/KmmtpC16AcylCoAMAT + C16EnoylCoAMAT_VMAT/KmmtpC16EnoylCoAMAT + C4AcetoacylCoAMAT_VMAT/KicrotC4AcetoacylCoA + C6AcylCoAMAT_VMAT/KmmtpC6AcylCoAMAT + C8AcylCoAMAT_VMAT/KmmtpC8AcylCoAMAT + C8EnoylCoAMAT_VMAT/KmmtpC8EnoylCoAMAT + 1))
	fRate54() = 0.73*Vmtp*(-AcetylCoAMAT_VMAT*C8AcylCoAMAT_VMAT*NADHMAT_VMAT/(Keqmtp*KmmtpC10EnoylCoAMAT*KmmtpCoAMAT*KmmtpNADMAT) + C10EnoylCoAMAT_VMAT*CoAMAT_VMAT*(-NADHMAT_VMAT + NADtMAT_VMAT)/(KmmtpC10EnoylCoAMAT*KmmtpCoAMAT*KmmtpNADMAT))/((1 + (-NADHMAT_VMAT + NADtMAT_VMAT)/KmmtpNADMAT + NADHMAT_VMAT/KmmtpNADHMAT)*(AcetylCoAMAT_VMAT/KmmtpAcetylCoAMAT + CoAMAT_VMAT/KmmtpCoAMAT + 1)*(C10AcylCoAMAT_VMAT/KmmtpC10AcylCoAMAT + C10EnoylCoAMAT_VMAT/KmmtpC10EnoylCoAMAT + C12AcylCoAMAT_VMAT/KmmtpC12AcylCoAMAT + C12EnoylCoAMAT_VMAT/KmmtpC12EnoylCoAMAT + C14AcylCoAMAT_VMAT/KmmtpC14AcylCoAMAT + C14EnoylCoAMAT_VMAT/KmmtpC14EnoylCoAMAT + C16AcylCoAMAT_VMAT/KmmtpC16AcylCoAMAT + C16EnoylCoAMAT_VMAT/KmmtpC16EnoylCoAMAT + C4AcetoacylCoAMAT_VMAT/KicrotC4AcetoacylCoA + C6AcylCoAMAT_VMAT/KmmtpC6AcylCoAMAT + C8AcylCoAMAT_VMAT/KmmtpC8AcylCoAMAT + C8EnoylCoAMAT_VMAT/KmmtpC8EnoylCoAMAT + 1))
	fRate55() = 0.34*Vmtp*(-AcetylCoAMAT_VMAT*C6AcylCoAMAT_VMAT*NADHMAT_VMAT/(Keqmtp*KmmtpC8EnoylCoAMAT*KmmtpCoAMAT*KmmtpNADMAT) + C8EnoylCoAMAT_VMAT*CoAMAT_VMAT*(-NADHMAT_VMAT + NADtMAT_VMAT)/(KmmtpC8EnoylCoAMAT*KmmtpCoAMAT*KmmtpNADMAT))/((1 + (-NADHMAT_VMAT + NADtMAT_VMAT)/KmmtpNADMAT + NADHMAT_VMAT/KmmtpNADHMAT)*(AcetylCoAMAT_VMAT/KmmtpAcetylCoAMAT + CoAMAT_VMAT/KmmtpCoAMAT + 1)*(C10AcylCoAMAT_VMAT/KmmtpC10AcylCoAMAT + C10EnoylCoAMAT_VMAT/KmmtpC10EnoylCoAMAT + C12AcylCoAMAT_VMAT/KmmtpC12AcylCoAMAT + C12EnoylCoAMAT_VMAT/KmmtpC12EnoylCoAMAT + C14AcylCoAMAT_VMAT/KmmtpC14AcylCoAMAT + C14EnoylCoAMAT_VMAT/KmmtpC14EnoylCoAMAT + C16AcylCoAMAT_VMAT/KmmtpC16AcylCoAMAT + C16EnoylCoAMAT_VMAT/KmmtpC16EnoylCoAMAT + C4AcetoacylCoAMAT_VMAT/KicrotC4AcetoacylCoA + C6AcylCoAMAT_VMAT/KmmtpC6AcylCoAMAT + C8AcylCoAMAT_VMAT/KmmtpC8AcylCoAMAT + C8EnoylCoAMAT_VMAT/KmmtpC8EnoylCoAMAT + 1))
	fRate56m() = 420000000.0
	fRate57m() = 2760000.0
	fRate58m() = 96000000.0
end functions
begin reaction rules
	vcpt1C16: 0  <-> Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~C16AcylCar,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~CYT,mat~0)@VCYT fRate0(),fRate0m() #Modifiers(C16AcylCoACYT, CarCYT, CoACYT, MalCoACYT, C16AcylCoACYT, CarCYT, C16AcylCarCYT, CoACYT, MalCoACYT, C16AcylCoACYT, CarCYT, C16AcylCarCYT, CoACYT, MalCoACYT)
	vcactC16: Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~C16AcylCar,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~CYT,mat~0)@VCYT <-> Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~C16AcylCar,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT)@VMAT fRate1(),fRate1m() #Modifiers(CarMAT, CarCYT, C16AcylCarCYT, CarMAT, C16AcylCarMAT, CarCYT, C16AcylCarCYT, CarMAT, C16AcylCarMAT, CarCYT)
	vcactC14: Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~C14AcylCar,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~CYT,mat~0)@VCYT <-> Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~C14AcylCar,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT)@VMAT fRate2(),fRate2m() #Modifiers(CarMAT, CarCYT, C14AcylCarCYT, CarMAT, C14AcylCarMAT, CarCYT, C14AcylCarCYT, CarMAT, C14AcylCarMAT, CarCYT)
	vcactC12: Car(C10AcylCar~0,C12AcylCar~C12AcylCar,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~CYT,mat~0)@VCYT <-> Car(C10AcylCar~0,C12AcylCar~C12AcylCar,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT)@VMAT fRate3(),fRate3m() #Modifiers(CarMAT, CarCYT, C12AcylCarCYT, CarMAT, C12AcylCarMAT, CarCYT, C12AcylCarCYT, CarMAT, C12AcylCarMAT, CarCYT)
	vcactC10: Car(C10AcylCar~C10AcylCar,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~CYT,mat~0)@VCYT <-> Car(C10AcylCar~C10AcylCar,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT)@VMAT fRate4(),fRate4m() #Modifiers(CarMAT, CarCYT, C10AcylCarCYT, CarMAT, C10AcylCarMAT, CarCYT, C10AcylCarCYT, CarMAT, C10AcylCarMAT, CarCYT)
	vcactC8: Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~C8AcylCar,cyt~CYT,mat~0)@VCYT <-> Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~C8AcylCar,cyt~0,mat~MAT)@VMAT fRate5(),fRate5m() #Modifiers(CarMAT, CarCYT, C8AcylCarCYT, CarMAT, C8AcylCarMAT, CarCYT, C8AcylCarCYT, CarMAT, C8AcylCarMAT, CarCYT)
	vcactC6: Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~C6AcylCar,C8AcylCar~0,cyt~CYT,mat~0)@VCYT <-> Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~C6AcylCar,C8AcylCar~0,cyt~0,mat~MAT)@VMAT fRate6(),fRate6m() #Modifiers(CarMAT, CarCYT, C6AcylCarCYT, CarMAT, C6AcylCarMAT, CarCYT, C6AcylCarCYT, CarMAT, C6AcylCarMAT, CarCYT)
	vcactC4: Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~C4AcylCar,C6AcylCar~0,C8AcylCar~0,cyt~CYT,mat~0)@VCYT <-> Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~C4AcylCar,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT)@VMAT fRate7(),fRate7m() #Modifiers(CarMAT, CarCYT, C4AcylCarCYT, CarMAT, C4AcylCarMAT, CarCYT, C4AcylCarCYT, CarMAT, C4AcylCarMAT, CarCYT)
	vcpt2C16: Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~C16AcylCar,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT)@VMAT <-> C16AcylC(oamat~OAMAT)@VMAT fRate8(),fRate8m() #Modifiers(C14AcylCarMAT, C12AcylCarMAT, C10AcylCarMAT, C8AcylCarMAT, C6AcylCarMAT, C4AcylCarMAT, CoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, CarMAT, C16AcylCarMAT, C14AcylCarMAT, C12AcylCarMAT, C10AcylCarMAT, C8AcylCarMAT, C6AcylCarMAT, C4AcylCarMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, CarMAT, C16AcylCarMAT, C14AcylCarMAT, C12AcylCarMAT, C10AcylCarMAT, C8AcylCarMAT, C6AcylCarMAT, C4AcylCarMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, CarMAT)
	vcpt2C14: Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~C14AcylCar,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT)@VMAT <-> C14AcylC(acetylcoamat,oamat~OAMAT)@VMAT fRate9(),fRate9m() #Modifiers(C16AcylCarMAT, C12AcylCarMAT, C10AcylCarMAT, C8AcylCarMAT, C6AcylCarMAT, C4AcylCarMAT, CoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, CarMAT, C14AcylCarMAT, C16AcylCarMAT, C12AcylCarMAT, C10AcylCarMAT, C8AcylCarMAT, C6AcylCarMAT, C4AcylCarMAT, CoAMAT, C14AcylCoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, CarMAT, C14AcylCarMAT, C16AcylCarMAT, C12AcylCarMAT, C10AcylCarMAT, C8AcylCarMAT, C6AcylCarMAT, C4AcylCarMAT, CoAMAT, C14AcylCoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, CarMAT)
	vcpt2C12: Car(C10AcylCar~0,C12AcylCar~C12AcylCar,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT)@VMAT <-> C12AcylC(acetylcoamat,oamat~OAMAT)@VMAT fRate10(),fRate10m() #Modifiers(C16AcylCarMAT, C14AcylCarMAT, C10AcylCarMAT, C8AcylCarMAT, C6AcylCarMAT, C4AcylCarMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, CarMAT, C12AcylCarMAT, C16AcylCarMAT, C14AcylCarMAT, C10AcylCarMAT, C8AcylCarMAT, C6AcylCarMAT, C4AcylCarMAT, CoAMAT, C12AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, CarMAT, C12AcylCarMAT, C16AcylCarMAT, C14AcylCarMAT, C10AcylCarMAT, C8AcylCarMAT, C6AcylCarMAT, C4AcylCarMAT, CoAMAT, C12AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, CarMAT)
	vcpt2C10: Car(C10AcylCar~C10AcylCar,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT)@VMAT <-> C10AcylC(acetylcoamat,oamat~OAMAT)@VMAT fRate11(),fRate11m() #Modifiers(C16AcylCarMAT, C14AcylCarMAT, C12AcylCarMAT, C8AcylCarMAT, C6AcylCarMAT, C4AcylCarMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, CarMAT, C10AcylCarMAT, C16AcylCarMAT, C14AcylCarMAT, C12AcylCarMAT, C8AcylCarMAT, C6AcylCarMAT, C4AcylCarMAT, CoAMAT, C10AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, CarMAT, C10AcylCarMAT, C16AcylCarMAT, C14AcylCarMAT, C12AcylCarMAT, C8AcylCarMAT, C6AcylCarMAT, C4AcylCarMAT, CoAMAT, C10AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, CarMAT)
	vcpt2C8: Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~C8AcylCar,cyt~0,mat~MAT)@VMAT <-> C8AcylC(acetylcoamat,oamat~OAMAT)@VMAT fRate12(),fRate12m() #Modifiers(C16AcylCarMAT, C14AcylCarMAT, C12AcylCarMAT, C10AcylCarMAT, C6AcylCarMAT, C4AcylCarMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, CarMAT, C8AcylCarMAT, C16AcylCarMAT, C14AcylCarMAT, C12AcylCarMAT, C10AcylCarMAT, C6AcylCarMAT, C4AcylCarMAT, CoAMAT, C8AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, CarMAT, C8AcylCarMAT, C16AcylCarMAT, C14AcylCarMAT, C12AcylCarMAT, C10AcylCarMAT, C6AcylCarMAT, C4AcylCarMAT, CoAMAT, C8AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, CarMAT)
	vcpt2C6: Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~C6AcylCar,C8AcylCar~0,cyt~0,mat~MAT)@VMAT <-> C6AcylC(acetylcoamat,oamat~OAMAT)@VMAT fRate13(),fRate13m() #Modifiers(C16AcylCarMAT, C14AcylCarMAT, C12AcylCarMAT, C10AcylCarMAT, C8AcylCarMAT, C4AcylCarMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C4AcylCoAMAT, CarMAT, C6AcylCarMAT, C16AcylCarMAT, C14AcylCarMAT, C12AcylCarMAT, C10AcylCarMAT, C8AcylCarMAT, C4AcylCarMAT, CoAMAT, C6AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C4AcylCoAMAT, CarMAT, C6AcylCarMAT, C16AcylCarMAT, C14AcylCarMAT, C12AcylCarMAT, C10AcylCarMAT, C8AcylCarMAT, C4AcylCarMAT, CoAMAT, C6AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C4AcylCoAMAT, CarMAT)
	vcpt2C4: Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~C4AcylCar,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT)@VMAT <-> C4AcylC(acetylcoamat,oamat~OAMAT)@VMAT fRate14(),fRate14m() #Modifiers(C16AcylCarMAT, C14AcylCarMAT, C12AcylCarMAT, C10AcylCarMAT, C8AcylCarMAT, C6AcylCarMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, CarMAT, C4AcylCarMAT, C16AcylCarMAT, C14AcylCarMAT, C12AcylCarMAT, C10AcylCarMAT, C8AcylCarMAT, C6AcylCarMAT, CoAMAT, C4AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, CarMAT, C4AcylCarMAT, C16AcylCarMAT, C14AcylCarMAT, C12AcylCarMAT, C10AcylCarMAT, C8AcylCarMAT, C6AcylCarMAT, CoAMAT, C4AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, CarMAT)
	vvlcadC16_reactants_0: 0  -> C16AcylC(oamat~OAMAT)@VMAT -1*(fRate15()) #Modifiers(C14AcylCoAMAT, C12AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, FADHMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, FADHMAT)
	vvlcadC16_products_0: 0  -> C16EnoylCoAMAT()@VMAT fRate15() #Modifiers(C14AcylCoAMAT, C12AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, FADHMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, FADHMAT)
	vvlcadC16_products_1: 0  -> FADHMAT()@VMAT fRate15() #Modifiers(C14AcylCoAMAT, C12AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, FADHMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, FADHMAT)
	vvlcadC14_reactants_0: 0  -> C14AcylC(acetylcoamat,oamat~OAMAT)@VMAT -1*(fRate16()) #Modifiers(C16AcylCoAMAT, C12AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, C14AcylCoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, FADHMAT, C14AcylCoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, FADHMAT)
	vvlcadC14_products_0: 0  -> C14EnoylCoAMAT()@VMAT fRate16() #Modifiers(C16AcylCoAMAT, C12AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, C14AcylCoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, FADHMAT, C14AcylCoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, FADHMAT)
	vvlcadC14_products_1: 0  -> FADHMAT()@VMAT fRate16() #Modifiers(C16AcylCoAMAT, C12AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, C14AcylCoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, FADHMAT, C14AcylCoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, FADHMAT)
	vvlcadC12_reactants_0: 0  -> C12AcylC(acetylcoamat,oamat~OAMAT)@VMAT -1*(fRate17()) #Modifiers(C16AcylCoAMAT, C14AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, FADHMAT, C12AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, FADHMAT)
	vvlcadC12_products_0: 0  -> C12EnoylCoAMAT()@VMAT fRate17() #Modifiers(C16AcylCoAMAT, C14AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, FADHMAT, C12AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, FADHMAT)
	vvlcadC12_products_1: 0  -> FADHMAT()@VMAT fRate17() #Modifiers(C16AcylCoAMAT, C14AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, FADHMAT, C12AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, FADHMAT)
	vlcadC16_reactants_0: 0  -> C16AcylC(oamat~OAMAT)@VMAT -1*(fRate18()) #Modifiers(C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, FADHMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, FADHMAT)
	vlcadC16_products_0: 0  -> C16EnoylCoAMAT()@VMAT fRate18() #Modifiers(C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, FADHMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, FADHMAT)
	vlcadC16_products_1: 0  -> FADHMAT()@VMAT fRate18() #Modifiers(C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, FADHMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, FADHMAT)
	vlcadC14_reactants_0: 0  -> C14AcylC(acetylcoamat,oamat~OAMAT)@VMAT -1*(fRate19()) #Modifiers(C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C14AcylCoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, FADHMAT, C14AcylCoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, FADHMAT)
	vlcadC14_products_0: 0  -> C14EnoylCoAMAT()@VMAT fRate19() #Modifiers(C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C14AcylCoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, FADHMAT, C14AcylCoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, FADHMAT)
	vlcadC14_products_1: 0  -> FADHMAT()@VMAT fRate19() #Modifiers(C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C14AcylCoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, FADHMAT, C14AcylCoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, FADHMAT)
	vlcadC12_reactants_0: 0  -> C12AcylC(acetylcoamat,oamat~OAMAT)@VMAT -1*(fRate20()) #Modifiers(C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C12AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, FADHMAT, C12AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, FADHMAT)
	vlcadC12_products_0: 0  -> C12EnoylCoAMAT()@VMAT fRate20() #Modifiers(C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C12AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, FADHMAT, C12AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, FADHMAT)
	vlcadC12_products_1: 0  -> FADHMAT()@VMAT fRate20() #Modifiers(C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C12AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, FADHMAT, C12AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, FADHMAT)
	vlcadC10_reactants_0: 0  -> C10AcylC(acetylcoamat,oamat~OAMAT)@VMAT -1*(fRate21()) #Modifiers(C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, C10AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C10EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, FADHMAT, C10AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C10EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, FADHMAT)
	vlcadC10_products_0: 0  -> C10EnoylCoAMAT()@VMAT fRate21() #Modifiers(C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, C10AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C10EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, FADHMAT, C10AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C10EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, FADHMAT)
	vlcadC10_products_1: 0  -> FADHMAT()@VMAT fRate21() #Modifiers(C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, C10AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C10EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, FADHMAT, C10AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C10EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, FADHMAT)
	vlcadC8_reactants_0: 0  -> C8AcylC(acetylcoamat,oamat~OAMAT)@VMAT -1*(fRate22()) #Modifiers(C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, FADtMAT, C8EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, FADHMAT, C8AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, FADtMAT, C8EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, FADHMAT)
	vlcadC8_products_0: 0  -> C8EnoylCoAMAT()@VMAT fRate22() #Modifiers(C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, FADtMAT, C8EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, FADHMAT, C8AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, FADtMAT, C8EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, FADHMAT)
	vlcadC8_products_1: 0  -> FADHMAT()@VMAT fRate22() #Modifiers(C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, FADtMAT, C8EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, FADHMAT, C8AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, FADtMAT, C8EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, FADHMAT)
	vmcadC12_reactants_0: 0  -> C12AcylC(acetylcoamat,oamat~OAMAT)@VMAT -1*(fRate23()) #Modifiers(C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, FADHMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, FADHMAT)
	vmcadC12_products_0: 0  -> C12EnoylCoAMAT()@VMAT fRate23() #Modifiers(C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, FADHMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, FADHMAT)
	vmcadC12_products_1: 0  -> FADHMAT()@VMAT fRate23() #Modifiers(C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, FADHMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, FADHMAT)
	vmcadC10_reactants_0: 0  -> C10AcylC(acetylcoamat,oamat~OAMAT)@VMAT -1*(fRate24()) #Modifiers(C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C10AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C10EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, FADHMAT, C10AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C10EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, FADHMAT)
	vmcadC10_products_0: 0  -> C10EnoylCoAMAT()@VMAT fRate24() #Modifiers(C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C10AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C10EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, FADHMAT, C10AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C10EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, FADHMAT)
	vmcadC10_products_1: 0  -> FADHMAT()@VMAT fRate24() #Modifiers(C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C10AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C10EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, FADHMAT, C10AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C10EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, FADHMAT)
	vmcadC8_reactants_0: 0  -> C8AcylC(acetylcoamat,oamat~OAMAT)@VMAT -1*(fRate25()) #Modifiers(C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C8AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C8EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, FADHMAT, C8AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C8EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, FADHMAT)
	vmcadC8_products_0: 0  -> C8EnoylCoAMAT()@VMAT fRate25() #Modifiers(C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C8AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C8EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, FADHMAT, C8AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C8EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, FADHMAT)
	vmcadC8_products_1: 0  -> FADHMAT()@VMAT fRate25() #Modifiers(C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C8AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C8EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, FADHMAT, C8AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C8EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, FADHMAT)
	vmcadC6_reactants_0: 0  -> C6AcylC(acetylcoamat,oamat~OAMAT)@VMAT -1*(fRate26()) #Modifiers(C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C4EnoylCoAMAT, C6AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C6EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C4EnoylCoAMAT, FADHMAT, C6AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C6EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C4EnoylCoAMAT, FADHMAT)
	vmcadC6_products_0: 0  -> C6EnoylCoAMAT()@VMAT fRate26() #Modifiers(C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C4EnoylCoAMAT, C6AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C6EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C4EnoylCoAMAT, FADHMAT, C6AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C6EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C4EnoylCoAMAT, FADHMAT)
	vmcadC6_products_1: 0  -> FADHMAT()@VMAT fRate26() #Modifiers(C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C4EnoylCoAMAT, C6AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C6EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C4EnoylCoAMAT, FADHMAT, C6AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C6EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C4EnoylCoAMAT, FADHMAT)
	vmcadC4_reactants_0: 0  -> C4AcylC(acetylcoamat,oamat~OAMAT)@VMAT -1*(fRate27()) #Modifiers(C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, FADtMAT, C4EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, FADHMAT, C4AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, FADtMAT, C4EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, FADHMAT)
	vmcadC4_products_0: 0  -> C4EnoylCoAMAT()@VMAT fRate27() #Modifiers(C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, FADtMAT, C4EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, FADHMAT, C4AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, FADtMAT, C4EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, FADHMAT)
	vmcadC4_products_1: 0  -> FADHMAT()@VMAT fRate27() #Modifiers(C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, FADtMAT, C4EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, FADHMAT, C4AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, FADtMAT, C4EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, FADHMAT)
	vscadC6_reactants_0: 0  -> C6AcylC(acetylcoamat,oamat~OAMAT)@VMAT -1*(fRate28()) #Modifiers(C4AcylCoAMAT, FADtMAT, C4EnoylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, FADHMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, FADHMAT)
	vscadC6_products_0: 0  -> C6EnoylCoAMAT()@VMAT fRate28() #Modifiers(C4AcylCoAMAT, FADtMAT, C4EnoylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, FADHMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, FADHMAT)
	vscadC6_products_1: 0  -> FADHMAT()@VMAT fRate28() #Modifiers(C4AcylCoAMAT, FADtMAT, C4EnoylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, FADHMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, FADHMAT)
	vscadC4_reactants_0: 0  -> C4AcylC(acetylcoamat,oamat~OAMAT)@VMAT -1*(fRate29()) #Modifiers(C6AcylCoAMAT, FADtMAT, C6EnoylCoAMAT, C4AcylCoAMAT, C6AcylCoAMAT, FADtMAT, C4EnoylCoAMAT, C6EnoylCoAMAT, FADHMAT, C4AcylCoAMAT, C6AcylCoAMAT, FADtMAT, C4EnoylCoAMAT, C6EnoylCoAMAT, FADHMAT)
	vscadC4_products_0: 0  -> C4EnoylCoAMAT()@VMAT fRate29() #Modifiers(C6AcylCoAMAT, FADtMAT, C6EnoylCoAMAT, C4AcylCoAMAT, C6AcylCoAMAT, FADtMAT, C4EnoylCoAMAT, C6EnoylCoAMAT, FADHMAT, C4AcylCoAMAT, C6AcylCoAMAT, FADtMAT, C4EnoylCoAMAT, C6EnoylCoAMAT, FADHMAT)
	vscadC4_products_1: 0  -> FADHMAT()@VMAT fRate29() #Modifiers(C6AcylCoAMAT, FADtMAT, C6EnoylCoAMAT, C4AcylCoAMAT, C6AcylCoAMAT, FADtMAT, C4EnoylCoAMAT, C6EnoylCoAMAT, FADHMAT, C4AcylCoAMAT, C6AcylCoAMAT, FADtMAT, C4EnoylCoAMAT, C6EnoylCoAMAT, FADHMAT)
	vcrotC16: C16EnoylCoAMAT()@VMAT <-> C16HydroxyacylCoAMAT()@VMAT fRate30(),fRate30m() #Modifiers(C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, C4AcetoacylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, C4AcetoacylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, C4AcetoacylCoAMAT)
	vcrotC14: C14EnoylCoAMAT()@VMAT <-> C14HydroxyacylCoAMAT()@VMAT fRate31(),fRate31m() #Modifiers(C16EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C16HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, C4AcetoacylCoAMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C14HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, C4AcetoacylCoAMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C14HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, C4AcetoacylCoAMAT)
	vcrotC12: C12EnoylCoAMAT()@VMAT <-> C12HydroxyacylCoAMAT()@VMAT fRate32(),fRate32m() #Modifiers(C16EnoylCoAMAT, C14EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, C4AcetoacylCoAMAT, C12EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C12HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, C4AcetoacylCoAMAT, C12EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C12HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, C4AcetoacylCoAMAT)
	vcrotC10: C10EnoylCoAMAT()@VMAT <-> C10HydroxyacylCoAMAT()@VMAT fRate33(),fRate33m() #Modifiers(C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, C4AcetoacylCoAMAT, C10EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C10HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, C4AcetoacylCoAMAT, C10EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C10HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, C4AcetoacylCoAMAT)
	vcrotC8: C8EnoylCoAMAT()@VMAT <-> C8HydroxyacylCoAMAT()@VMAT fRate34(),fRate34m() #Modifiers(C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, C4AcetoacylCoAMAT, C8EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C8HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, C4AcetoacylCoAMAT, C8EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C8HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, C4AcetoacylCoAMAT)
	vcrotC6: C6EnoylCoAMAT()@VMAT <-> C6HydroxyacylCoAMAT()@VMAT fRate35(),fRate35m() #Modifiers(C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C4EnoylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, C4AcetoacylCoAMAT, C6EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C4EnoylCoAMAT, C6HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, C4AcetoacylCoAMAT, C6EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C4EnoylCoAMAT, C6HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, C4AcetoacylCoAMAT)
	vcrotC4: C4EnoylCoAMAT()@VMAT <-> C4HydroxyacylCoAMAT()@VMAT fRate36(),fRate36m() #Modifiers(C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4AcetoacylCoAMAT, C4EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4AcetoacylCoAMAT, C4EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4AcetoacylCoAMAT)
	vmschadC16_reactants_0: 0  -> C16HydroxyacylCoAMAT()@VMAT -1*(fRate37()) #Modifiers(C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT)
	vmschadC16_products_0: 0  -> AcetylCoAMAT(acetylcoamat,c10acylc,c12acylc,c14acylc!971,c4acylc,c6acylc,c8acylc)@VMAT.C14AcylC(acetylcoamat!971,oamat~OAMAT)@VMAT fRate37() #Modifiers(C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT)
	vmschadC16_products_1: 0  -> NADHMAT()@VMAT fRate37() #Modifiers(C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT)
	vmschadC14_reactants_0: 0  -> C14HydroxyacylCoAMAT()@VMAT -1*(fRate38()) #Modifiers(C16HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C16KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, C14HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C14KetoacylCoAMAT, C16KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT, C14HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C14KetoacylCoAMAT, C16KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT)
	vmschadC14_products_0: 0  -> AcetylCoAMAT(acetylcoamat,c10acylc,c12acylc!972,c14acylc,c4acylc,c6acylc,c8acylc)@VMAT.C12AcylC(acetylcoamat!972,oamat~OAMAT)@VMAT fRate38() #Modifiers(C16HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C16KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, C14HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C14KetoacylCoAMAT, C16KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT, C14HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C14KetoacylCoAMAT, C16KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT)
	vmschadC14_products_1: 0  -> NADHMAT()@VMAT fRate38() #Modifiers(C16HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C16KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, C14HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C14KetoacylCoAMAT, C16KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT, C14HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C14KetoacylCoAMAT, C16KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT)
	vmschadC12_reactants_0: 0  -> C12HydroxyacylCoAMAT()@VMAT -1*(fRate39()) #Modifiers(C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, C12HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C12KetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT, C12HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C12KetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT)
	vmschadC12_products_0: 0  -> AcetylCoAMAT(acetylcoamat,c10acylc!973,c12acylc,c14acylc,c4acylc,c6acylc,c8acylc)@VMAT.C10AcylC(acetylcoamat!973,oamat~OAMAT)@VMAT fRate39() #Modifiers(C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, C12HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C12KetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT, C12HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C12KetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT)
	vmschadC12_products_1: 0  -> NADHMAT()@VMAT fRate39() #Modifiers(C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, C12HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C12KetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT, C12HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C12KetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT)
	vmschadC10_reactants_0: 0  -> C10HydroxyacylCoAMAT()@VMAT -1*(fRate40()) #Modifiers(C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, C10HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C10KetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT, C10HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C10KetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT)
	vmschadC10_products_0: 0  -> AcetylCoAMAT(acetylcoamat,c10acylc,c12acylc,c14acylc,c4acylc,c6acylc,c8acylc!974)@VMAT.C8AcylC(acetylcoamat!974,oamat~OAMAT)@VMAT fRate40() #Modifiers(C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, C10HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C10KetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT, C10HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C10KetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT)
	vmschadC10_products_1: 0  -> NADHMAT()@VMAT fRate40() #Modifiers(C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, C10HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C10KetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT, C10HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C10KetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT)
	vmschadC8_reactants_0: 0  -> C8HydroxyacylCoAMAT()@VMAT -1*(fRate41()) #Modifiers(C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, C8HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C8KetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT, C8HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C8KetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT)
	vmschadC8_products_0: 0  -> AcetylCoAMAT(acetylcoamat,c10acylc,c12acylc,c14acylc,c4acylc,c6acylc!969,c8acylc)@VMAT.C6AcylC(acetylcoamat!969,oamat~OAMAT)@VMAT fRate41() #Modifiers(C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, C8HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C8KetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT, C8HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C8KetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT)
	vmschadC8_products_1: 0  -> NADHMAT()@VMAT fRate41() #Modifiers(C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, C8HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C8KetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT, C8HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C8KetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT)
	vmschadC6_reactants_0: 0  -> C6HydroxyacylCoAMAT()@VMAT -1*(fRate42()) #Modifiers(C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C4AcetoacylCoAMAT, C6HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C6KetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT, C6HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C6KetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT)
	vmschadC6_products_0: 0  -> AcetylCoAMAT(acetylcoamat,c10acylc,c12acylc,c14acylc,c4acylc!970,c6acylc,c8acylc)@VMAT.C4AcylC(acetylcoamat!970,oamat~OAMAT)@VMAT fRate42() #Modifiers(C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C4AcetoacylCoAMAT, C6HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C6KetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT, C6HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C6KetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT)
	vmschadC6_products_1: 0  -> NADHMAT()@VMAT fRate42() #Modifiers(C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C4AcetoacylCoAMAT, C6HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C6KetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT, C6HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C4HydroxyacylCoAMAT, NADtMAT, C6KetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C4AcetoacylCoAMAT, NADHMAT)
	vmschadC4_reactants_0: 0  -> C4HydroxyacylCoAMAT()@VMAT -1*(fRate43()) #Modifiers(C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, NADtMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, NADtMAT, C4AcetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, NADHMAT, C4HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, NADtMAT, C4AcetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, NADHMAT)
	vmschadC4_products_0: 0  -> AcetylCoAMAT(acetylcoamat!968,c10acylc,c12acylc,c14acylc,c4acylc,c6acylc,c8acylc)@VMAT.AcetylCoAMAT(acetylcoamat!968,c10acylc,c12acylc,c14acylc,c4acylc,c6acylc,c8acylc)@VMAT fRate43() #Modifiers(C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, NADtMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, NADtMAT, C4AcetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, NADHMAT, C4HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, NADtMAT, C4AcetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, NADHMAT)
	vmschadC4_products_1: 0  -> NADHMAT()@VMAT fRate43() #Modifiers(C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, NADtMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, NADtMAT, C4AcetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, NADHMAT, C4HydroxyacylCoAMAT, C16HydroxyacylCoAMAT, C14HydroxyacylCoAMAT, C12HydroxyacylCoAMAT, C10HydroxyacylCoAMAT, C8HydroxyacylCoAMAT, C6HydroxyacylCoAMAT, NADtMAT, C4AcetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, NADHMAT)
	vmckatC16: AcetylCoAMAT(acetylcoamat,c10acylc,c12acylc,c14acylc!971,c4acylc,c6acylc,c8acylc)@VMAT.C14AcylC(acetylcoamat!971,oamat~OAMAT)@VMAT <-> C14AcylC(acetylcoamat,oamat~OAMAT)@VMAT + AcetylCoAMAT(acetylcoamat,c10acylc,c12acylc,c14acylc,c4acylc,c6acylc,c8acylc)@VMAT fRate44(),fRate44m() #Modifiers(C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, CoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, CoAMAT, C14AcylCoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, AcetylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, CoAMAT, C14AcylCoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, AcetylCoAMAT)
	vmckatC14: AcetylCoAMAT(acetylcoamat,c10acylc,c12acylc!972,c14acylc,c4acylc,c6acylc,c8acylc)@VMAT.C12AcylC(acetylcoamat!972,oamat~OAMAT)@VMAT <-> C12AcylC(acetylcoamat,oamat~OAMAT)@VMAT + AcetylCoAMAT(acetylcoamat,c10acylc,c12acylc,c14acylc,c4acylc,c6acylc,c8acylc)@VMAT fRate45(),fRate45m() #Modifiers(C16KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, C14KetoacylCoAMAT, C16KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, CoAMAT, C12AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, AcetylCoAMAT, C14KetoacylCoAMAT, C16KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, CoAMAT, C12AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, AcetylCoAMAT)
	vmckatC12: AcetylCoAMAT(acetylcoamat,c10acylc!973,c12acylc,c14acylc,c4acylc,c6acylc,c8acylc)@VMAT.C10AcylC(acetylcoamat!973,oamat~OAMAT)@VMAT <-> C10AcylC(acetylcoamat,oamat~OAMAT)@VMAT + AcetylCoAMAT(acetylcoamat,c10acylc,c12acylc,c14acylc,c4acylc,c6acylc,c8acylc)@VMAT fRate46(),fRate46m() #Modifiers(C16KetoacylCoAMAT, C14KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, C12KetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, CoAMAT, C10AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, AcetylCoAMAT, C12KetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, CoAMAT, C10AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, AcetylCoAMAT)
	vmckatC10: AcetylCoAMAT(acetylcoamat,c10acylc,c12acylc,c14acylc,c4acylc,c6acylc,c8acylc!974)@VMAT.C8AcylC(acetylcoamat!974,oamat~OAMAT)@VMAT <-> C8AcylC(acetylcoamat,oamat~OAMAT)@VMAT + AcetylCoAMAT(acetylcoamat,c10acylc,c12acylc,c14acylc,c4acylc,c6acylc,c8acylc)@VMAT fRate47(),fRate47m() #Modifiers(C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, C10KetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, CoAMAT, C8AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, AcetylCoAMAT, C10KetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, CoAMAT, C8AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, AcetylCoAMAT)
	vmckatC8: AcetylCoAMAT(acetylcoamat,c10acylc,c12acylc,c14acylc,c4acylc,c6acylc!969,c8acylc)@VMAT.C6AcylC(acetylcoamat!969,oamat~OAMAT)@VMAT <-> C6AcylC(acetylcoamat,oamat~OAMAT)@VMAT + AcetylCoAMAT(acetylcoamat,c10acylc,c12acylc,c14acylc,c4acylc,c6acylc,c8acylc)@VMAT fRate48(),fRate48m() #Modifiers(C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C4AcylCoAMAT, C8KetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, CoAMAT, C6AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C4AcylCoAMAT, AcetylCoAMAT, C8KetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C6KetoacylCoAMAT, C4AcetoacylCoAMAT, CoAMAT, C6AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C4AcylCoAMAT, AcetylCoAMAT)
	vmckatC6: AcetylCoAMAT(acetylcoamat,c10acylc,c12acylc,c14acylc,c4acylc!970,c6acylc,c8acylc)@VMAT.C4AcylC(acetylcoamat!970,oamat~OAMAT)@VMAT <-> C4AcylC(acetylcoamat,oamat~OAMAT)@VMAT + AcetylCoAMAT(acetylcoamat,c10acylc,c12acylc,c14acylc,c4acylc,c6acylc,c8acylc)@VMAT fRate49(),fRate49m() #Modifiers(C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C4AcetoacylCoAMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C6KetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C4AcetoacylCoAMAT, CoAMAT, C4AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, AcetylCoAMAT, C6KetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C4AcetoacylCoAMAT, CoAMAT, C4AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, AcetylCoAMAT)
	vmckatC4: AcetylCoAMAT(acetylcoamat!968,c10acylc,c12acylc,c14acylc,c4acylc,c6acylc,c8acylc)@VMAT.AcetylCoAMAT(acetylcoamat!968,c10acylc,c12acylc,c14acylc,c4acylc,c6acylc,c8acylc)@VMAT <-> AcetylCoAMAT(acetylcoamat,c10acylc,c12acylc,c14acylc,c4acylc,c6acylc,c8acylc)@VMAT + AcetylCoAMAT(acetylcoamat,c10acylc,c12acylc,c14acylc,c4acylc,c6acylc,c8acylc)@VMAT fRate50(),fRate50m() #Modifiers(C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, CoAMAT, C4AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, CoAMAT, C4AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, AcetylCoAMAT, C4AcetoacylCoAMAT, C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, CoAMAT, C4AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, AcetylCoAMAT)
	vmtpC16_reactants_0: 0  -> C16EnoylCoAMAT()@VMAT -1*(fRate51()) #Modifiers(C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C14AcylCoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C14AcylCoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT)
	vmtpC16_products_0: 0  -> C14AcylC(acetylcoamat,oamat~OAMAT)@VMAT fRate51() #Modifiers(C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C14AcylCoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C14AcylCoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT)
	vmtpC16_products_1: 0  -> AcetylCoAMAT(acetylcoamat,c10acylc,c12acylc,c14acylc,c4acylc,c6acylc,c8acylc)@VMAT fRate51() #Modifiers(C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C14AcylCoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C14AcylCoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT)
	vmtpC16_products_2: 0  -> NADHMAT()@VMAT fRate51() #Modifiers(C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C14AcylCoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C14AcylCoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT)
	vmtpC14_reactants_0: 0  -> C14EnoylCoAMAT()@VMAT -1*(fRate52()) #Modifiers(C16EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C12AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C12AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT)
	vmtpC14_products_0: 0  -> C12AcylC(acetylcoamat,oamat~OAMAT)@VMAT fRate52() #Modifiers(C16EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C12AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C12AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT)
	vmtpC14_products_1: 0  -> AcetylCoAMAT(acetylcoamat,c10acylc,c12acylc,c14acylc,c4acylc,c6acylc,c8acylc)@VMAT fRate52() #Modifiers(C16EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C12AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C12AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT)
	vmtpC14_products_2: 0  -> NADHMAT()@VMAT fRate52() #Modifiers(C16EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C12AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C12AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT)
	vmtpC12_reactants_0: 0  -> C12EnoylCoAMAT()@VMAT -1*(fRate53()) #Modifiers(C16EnoylCoAMAT, C14EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, C12EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C10AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT, C12EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C10AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT)
	vmtpC12_products_0: 0  -> C10AcylC(acetylcoamat,oamat~OAMAT)@VMAT fRate53() #Modifiers(C16EnoylCoAMAT, C14EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, C12EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C10AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT, C12EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C10AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT)
	vmtpC12_products_1: 0  -> AcetylCoAMAT(acetylcoamat,c10acylc,c12acylc,c14acylc,c4acylc,c6acylc,c8acylc)@VMAT fRate53() #Modifiers(C16EnoylCoAMAT, C14EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, C12EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C10AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT, C12EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C10AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT)
	vmtpC12_products_2: 0  -> NADHMAT()@VMAT fRate53() #Modifiers(C16EnoylCoAMAT, C14EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, C12EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C10AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT, C12EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C10AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT)
	vmtpC10_reactants_0: 0  -> C10EnoylCoAMAT()@VMAT -1*(fRate54()) #Modifiers(C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, C10EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C8AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT, C10EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C8AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT)
	vmtpC10_products_0: 0  -> C8AcylC(acetylcoamat,oamat~OAMAT)@VMAT fRate54() #Modifiers(C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, C10EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C8AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT, C10EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C8AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT)
	vmtpC10_products_1: 0  -> AcetylCoAMAT(acetylcoamat,c10acylc,c12acylc,c14acylc,c4acylc,c6acylc,c8acylc)@VMAT fRate54() #Modifiers(C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, C10EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C8AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT, C10EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C8AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT)
	vmtpC10_products_2: 0  -> NADHMAT()@VMAT fRate54() #Modifiers(C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, C10EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C8AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT, C10EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C8AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT)
	vmtpC8_reactants_0: 0  -> C8EnoylCoAMAT()@VMAT -1*(fRate55()) #Modifiers(C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C4AcetoacylCoAMAT, C8EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, NADtMAT, CoAMAT, C6AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT, C8EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, NADtMAT, CoAMAT, C6AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT)
	vmtpC8_products_0: 0  -> C6AcylC(acetylcoamat,oamat~OAMAT)@VMAT fRate55() #Modifiers(C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C4AcetoacylCoAMAT, C8EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, NADtMAT, CoAMAT, C6AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT, C8EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, NADtMAT, CoAMAT, C6AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT)
	vmtpC8_products_1: 0  -> AcetylCoAMAT(acetylcoamat,c10acylc,c12acylc,c14acylc,c4acylc,c6acylc,c8acylc)@VMAT fRate55() #Modifiers(C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C4AcetoacylCoAMAT, C8EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, NADtMAT, CoAMAT, C6AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT, C8EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, NADtMAT, CoAMAT, C6AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT)
	vmtpC8_products_2: 0  -> NADHMAT()@VMAT fRate55() #Modifiers(C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C4AcetoacylCoAMAT, C8EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, NADtMAT, CoAMAT, C6AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT, C8EnoylCoAMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, NADtMAT, CoAMAT, C6AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, NADHMAT, AcetylCoAMAT, C4AcetoacylCoAMAT)
	vacesink: AcetylCoAMAT(acetylcoamat,c10acylc,c12acylc,c14acylc,c4acylc,c6acylc,c8acylc)@VMAT <-> 0  r57_Ksacesink,fRate56m() #Modifiers(AcetylCoAMAT, AcetylCoAMAT)
	vfadhsink: FADHMAT()@VMAT <-> 0  r58_Ksfadhsink,fRate57m() #Modifiers(FADHMAT, FADHMAT)
	vnadhsink: NADHMAT()@VMAT <-> 0  r59_Ksnadhsink,fRate58m() #Modifiers(NADHMAT, NADHMAT)
end reaction rules
end model
