###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000507', 'http://identifiers.org/biomodels.db/MODEL1401190000']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/10659857']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0010468']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/562']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 3 molecules and 4 reactions. The translated model has 2 molecules and 4 rules'
###
begin model
begin parameters
	parameter_1 156.25
	parameter_2 15.6
	parameter_3 2.5
	parameter_4 1.0
	parameter_5 2.9618e-05
	parameter_6 2.0015
	ModelValue_4 (2.9618e-05)
	ModelValue_5 (2.0015)
	r2_k1 1.000000
	r4_k1 1.000000
end parameters
begin molecule types
	#^ bqbiol:isVersionOf uniprot:P04483
	V()
	#^ bqbiol:isVersionOf uniprot:P03023
	U()
end molecule types
begin seed species
end seed species
begin observables
	Species U U() #U
	Species V V() #V
end observables
begin functions
	parameter_7() = U*(IPTG/ModelValue_4 + 1)^(-ModelValue_5)
	fRate0() = parameter_1/(V^parameter_3 + 1.0)
	fRate2() = parameter_2/(parameter_7^parameter_4 + 1.0)
end functions
begin reaction rules
	reaction_1: 0  -> U() fRate0() #Modifiers(species_2, species_2)
	reaction_2: U() -> 0  r2_k1 #Modifiers(species_1)
	reaction_3: 0  -> V() fRate2()
	reaction_4: V() -> 0  r4_k1 #Modifiers(species_2)
end reaction rules
end model
