###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1403050002', 'http://identifiers.org/biomodels.db/BIOMD0000000525']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/24619646']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_OCCURS_IN:['http://identifiers.org/bto/BTO:0000567']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0006915']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 18 molecules and 19 reactions. The translated model has 9 molecules and 28 rules'
###
begin model
begin parameters
	kon_FADD 0.00108871858684363
	koff_FADD 0.00130854998177646
	kDISC 0.000364965874405544
	kD216 0.00639775937416746
	kD216trans_p55 0.000223246421372882
	kD216trans_p43 5.29906975294056e-05
	kD374 0.000644612643975149
	kD374trans_p55 0.000543518631342483
	kD374trans_p43 0.00413530054938906
	kdiss_p18 0.064713651554491
	kBid 0.00052134055139547
	kD374probe 0.00153710001025539
	KDR 57.2050013008496
	KDL 30.0060394758199
	CD95 6.98552e+25 # 116.0mol/L * 6.022e23/mol *1.0L
	CD95L 9.99652e+24 #original 16.6mol/L
end parameters
begin molecule types
	#^ bqbiol:isEncodedBy ensembl:ENSG00000064012
	p55free(fadd)
	#^ bqbiol:isPartOf uniprot:Q14790
	p18(fadd,p18inactive~p18inactive~0)
	#^ bqbiol:isVersionOf uniprot:P42212
	mGFP(prer)
	#^ bqbiol:isVersionOf uniprot:Q13158
	FADD(DISC~DISC~0,p18,p55free)
	#^ bqbiol:hasPart chebi:CHEBI:50406, uniprot:P27824
	PrER(PrNES~PrNES~0,PrNES_mCherry~PrNES_mCherry~0,mgfp)
	#^ bqbiol:isVersionOf uniprot:Q9U6Y8
	mCherry()
	p43()
	#^ bqbiol:hasPart uniprot:P55957, go:GO:0097345
	tBid()
	#^ bqbiol:isVersionOf uniprot:P55957
	Bid()
end molecule types
begin seed species
	FADD(DISC~0,p18,p55free) 5.60046e+25 #original 93.0mol/L #FADD #FADD
	p55free(fadd) 9.334100000000001e+25 #original 155.0mol/L #p55free #p55free
	Bid() 1.4211920000000001e+26 #original 236.0mol/L #Bid #Bid
	PrER(PrNES~0,PrNES_mCherry~PrNES_mCherry,mgfp) 5.8594060000000006e+26 #original 973.0mol/L #PrNES_mCherry #PrNES_mCherry
	PrER(PrNES~0,PrNES_mCherry~0,mgfp!66).mGFP(prer!66) 3.1181916e+27 #original 5178.0mol/L #PrER_mGFP #PrER_mGFP
end seed species
begin observables
	Species FADD FADD(DISC~0,p18,p55free) #FADD
	Species p55free p55free(fadd) #p55free
	Species Bid Bid() #Bid
	Species PrNES_mCherry PrER(PrNES~0,PrNES_mCherry~PrNES_mCherry,mgfp) #PrNES_mCherry
	Species PrER_mGFP PrER(PrNES~0,PrNES_mCherry~0,mgfp!66).mGFP(prer!66) #PrER_mGFP
	Species DISC FADD(DISC~DISC,p18,p55free) #DISC
	Species DISCp55 FADD(DISC~DISC,p18,p55free!68).p55free(fadd!68) #DISCp55
	Species p30 FADD(DISC~DISC,p18!67,p55free).p18(fadd!67,p18inactive~0) #p30
	Species p43 p43() #p43
	Species p18 p18(fadd,p18inactive~0) #p18
	Species p18inactive p18(fadd,p18inactive~p18inactive) #p18inactive
	Species tBid tBid() #tBid
	Species PrNES PrER(PrNES~PrNES,PrNES_mCherry~0,mgfp) #PrNES
	Species mCherry mCherry() #mCherry
	Species PrER PrER(PrNES~0,PrNES_mCherry~0,mgfp) #PrER
	Species mGFP mGFP(prer) #mGFP
end observables
begin functions
	CD95act() = CD95^3*CD95L*KDL^2/((CD95L + KDL)*(CD95^2*KDL^2 + CD95L^2*KDR + 2*CD95L*KDL*KDR + KDL^2*KDR))
	fRate0() = CD95act*kon_FADD
	fRate4() = DISCp55*kD216trans_p55*(DISCp55 + p30)
	fRate5() = kD216trans_p43*p43
	fRate7() = kD216trans_p55*p43*(DISCp55 + p30)
	fRate8() = kD216trans_p43*p43
	fRate10() = DISCp55*kD374trans_p55*(DISCp55 + p30)
	fRate11() = kD374trans_p43*p43
	fRate13() = kD374trans_p55*p30*(DISCp55 + p30)
	fRate14() = kD374trans_p43*p43
	fRate16() = Bid*kBid*(p18 + p43)
	fRate17() = PrNES_mCherry*kD374probe*(p18 + p43)
	fRate18() = kD374probe*p18
end functions
begin reaction rules
	reaction_1: FADD(DISC~0,p18,p55free) -> FADD(DISC~DISC,p18,p55free) fRate0() #Modifiers(FADD)
	reaction_2: FADD(DISC~DISC,p18,p55free) -> FADD(DISC~0,p18,p55free) koff_FADD #Modifiers(DISC)
	reaction_3: p55free(fadd) + FADD(DISC~DISC,p18,p55free) -> FADD(DISC~DISC,p18,p55free!68).p55free(fadd!68) kDISC #Modifiers(p55free, DISC)
	reaction_4: FADD(DISC~DISC,p18,p55free!68).p55free(fadd!68) -> FADD(DISC~DISC,p18!67,p55free).p18(fadd!67,p18inactive~0) kD216 #Modifiers(DISCp55)
	reaction_5_reactants_0: 0  -> FADD(DISC~DISC,p18,p55free!68).p55free(fadd!68) -1*(fRate4()) #Modifiers(DISCp55, p30, DISCp55, p30)
	reaction_5_products_0: 0  -> FADD(DISC~DISC,p18!67,p55free).p18(fadd!67,p18inactive~0) fRate4() #Modifiers(DISCp55, p30, DISCp55, p30)
	reaction_6: FADD(DISC~DISC,p18,p55free!68).p55free(fadd!68) -> FADD(DISC~DISC,p18!67,p55free).p18(fadd!67,p18inactive~0) fRate5() #Modifiers(p43, DISCp55, p43)
	reaction_7: p43() -> p18(fadd,p18inactive~0) + FADD(DISC~DISC,p18,p55free) kD216 #Modifiers(p43)
	reaction_8_reactants_0: 0  -> p43() -1*(fRate7()) #Modifiers(DISCp55, p30, p43, DISCp55, p30)
	reaction_8_products_0: 0  -> p18(fadd,p18inactive~0) fRate7() #Modifiers(DISCp55, p30, p43, DISCp55, p30)
	reaction_8_products_1: 0  -> FADD(DISC~DISC,p18,p55free) fRate7() #Modifiers(DISCp55, p30, p43, DISCp55, p30)
	reaction_9: p43() -> p18(fadd,p18inactive~0) + FADD(DISC~DISC,p18,p55free) fRate8() #Modifiers(p43, p43)
	reaction_10: FADD(DISC~DISC,p18,p55free!68).p55free(fadd!68) -> p43() kD374 #Modifiers(DISCp55)
	reaction_11_reactants_0: 0  -> FADD(DISC~DISC,p18,p55free!68).p55free(fadd!68) -1*(fRate10()) #Modifiers(DISCp55, p30, DISCp55, p30)
	reaction_11_products_0: 0  -> p43() fRate10() #Modifiers(DISCp55, p30, DISCp55, p30)
	reaction_12: FADD(DISC~DISC,p18,p55free!68).p55free(fadd!68) -> p43() fRate11() #Modifiers(p43, DISCp55, p43)
	reaction_13: FADD(DISC~DISC,p18!67,p55free).p18(fadd!67,p18inactive~0) -> p18(fadd,p18inactive~0) + FADD(DISC~DISC,p18,p55free) kD374 #Modifiers(p30)
	reaction_14_reactants_0: 0  -> FADD(DISC~DISC,p18!67,p55free).p18(fadd!67,p18inactive~0) -1*(fRate13()) #Modifiers(DISCp55, p30, p30, DISCp55)
	reaction_14_products_0: 0  -> p18(fadd,p18inactive~0) fRate13() #Modifiers(DISCp55, p30, p30, DISCp55)
	reaction_14_products_1: 0  -> FADD(DISC~DISC,p18,p55free) fRate13() #Modifiers(DISCp55, p30, p30, DISCp55)
	reaction_15: FADD(DISC~DISC,p18!67,p55free).p18(fadd!67,p18inactive~0) -> p18(fadd,p18inactive~0) + FADD(DISC~DISC,p18,p55free) fRate14() #Modifiers(p43, p30, p43)
	reaction_16: p18(fadd,p18inactive~0) -> p18(fadd,p18inactive~p18inactive) kdiss_p18 #Modifiers(p18)
	reaction_17_reactants_0: 0  -> Bid() -1*(fRate16()) #Modifiers(p43, p18, Bid, p43, p18)
	reaction_17_products_0: 0  -> tBid() fRate16() #Modifiers(p43, p18, Bid, p43, p18)
	reaction_18_reactants_0: 0  -> PrER(PrNES~0,PrNES_mCherry~PrNES_mCherry,mgfp) -1*(fRate17()) #Modifiers(p43, p18, PrNES_mCherry, p43, p18)
	reaction_18_products_0: 0  -> PrER(PrNES~PrNES,PrNES_mCherry~0,mgfp) fRate17() #Modifiers(p43, p18, PrNES_mCherry, p43, p18)
	reaction_18_products_1: 0  -> mCherry() fRate17() #Modifiers(p43, p18, PrNES_mCherry, p43, p18)
	reaction_19: PrER(PrNES~0,PrNES_mCherry~0,mgfp!66).mGFP(prer!66) -> PrER(PrNES~0,PrNES_mCherry~0,mgfp) + mGFP(prer) fRate18() #Modifiers(p18, PrER_mGFP, p18)
end reaction rules
end model
