###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1407170000', 'http://identifiers.org/biomodels.db/BIOMD0000000531']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/22767606']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0070841', 'http://identifiers.org/go/GO:1990000']
#@BQB_HAS_PROPERTY:['http://identifiers.org/doid/DOID:10652']
#@creatorEmail:'lloret@ebi.ac.uk'
#@creatorName:'Lloret i Villas Audald'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 1 molecules and 0 reactions. The translated model has 0 molecules and 0 rules'
###
begin model
begin parameters
	Ka 1.44
	kb 1.6e-10
end parameters
begin molecule types
end molecule types
begin seed species
end seed species
begin observables
end observables
begin functions
	alpha_ar() = 1 - 1/(kb*(exp(Ka*time()) - 1) + 1)
	v50t50() = (kb/4 + 1/4)*ln(1 + 1/kb)
	kat50() = ln(1 + 1/kb)
end functions
begin reaction rules
end reaction rules
end model
