###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1408050003', 'http://identifiers.org/biomodels.db/BIOMD0000000536']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/24402116']
#@BQB_IS_PART_OF:['http://identifiers.org/reactome/REACT_27307.1']
#@BQB_HAS_VERSION:['http://identifiers.org/doid/DOID:8778']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0004915']
#@BQB_HAS_PART:['http://identifiers.org/go/GO:0007259']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@creatorEmail:'vknight@ebi.ac.uk'
#@creatorName:'Knight-Schrijver Vincent'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 39 molecules and 66 reactions. The translated model has 12 molecules and 66 rules'
###
begin model
begin parameters
	kRLOn 0.384
	kRLOff 1.92
	kgp130On 20.52
	kgp130Off 1.026
	kRAct 155.0
	kRint 1.96
	kRsynth 0.0685
	kRdeg 0.1561
	kIL6Synth 0.0063
	kIL6Decay 34.82
	kCRPDecay 0.36
	mwfd291862_195f_4979_94b5_b4e5ae1b7d52 5.34
	mwd36b0261_2480_4cab_9222_2cf8fb0e65dc 0.62
	mw1667a8e0_9d20_4e59_ba51_596148aba787 0.525
	mwfcf06900_5f2f_4bb3_bb1f_12023612b8a8 155.3
	mw9442cd0e_4d7c_4ba6_a695_f84919bdf569 145.0
	mwe8fc1900_f07d_468b_b5c8_15400a583c3d 219.0
	mw08950572_81b0_4570_b2e4_b9c3462c1425 10.0
	mw92d854a7_8aaf_458e_b5e2_20a63ce9b654 330.0
	mw862f1480_c60c_4863_a565_b2c1c77e238e 0.5
	mw65c85954_5ca0_4df2_9e22_ff2aa3fbe3f1 0.42
	mwc4c58db7_5535_4590_aaa5_bbc8ed53cdab 0.1
	mw88a75379_f9a1_4acc_baeb_94c32bb736a5 0.3
	mw1f41474c_c399_4a60_a53a_9926dd092e8d 3.9
	mwbcb5a310_9b67_405e_89ec_43d25e8cc93d 1.0
	mwa8d72918_f6c2_4d81_bf3b_fc2b464d5e69 0.036
	mw06241335_b5f2_47ed_bdcc_ef77b68a2b98 1.0
	mwce10678d_8197_408c_ad47_1daec8104cd8 0.8473
	mwc67e1333_079a_4bea_9b4f_0a1b15ddd7bb 1.2125
	mw5832a2dc_ee18_44df_aa59_ccb21cb74df2 0.0054
	mwf44f7f27_5bb1_4c7f_8964_560fa5e1743a 0.01
	mwdc9e2eb7_c8f4_4026_a8d0_eff8ce1f1aea 1.0
	mw2c605ff5_50f5_45f2_a70c_53fcd866d14c 2.88
	mwc691d0d1_8c1b_4ce4_85c6_1315c42e97b1 2.88
	mwa8283449_0e21_41a1_baac_ebf697b3555a 1.44
	mw6729db10_c577_4319_b355_2e3f11c0f942 0.576
	mw434adaf5_cef0_4a33_9ad2_a4e49e1fd825 0.06
	mw6a5e10a9_d442_4dde_8ec3_6a26c9807374 0.03
	mw1366c3b5_e79b_44a7_93cc_ee09d383eabf 0.001
	mwbd1d5bc3_d4b9_4aec_9b86_6f776da20a30 0.0018
	mw640ca705_e089_4c64_a5f4_9562317e8c76 (0.06) / (2.88)
	mw43ccad8c_cabf_4eaf_90d5_e06ae43be2cb (0.06) / (2.88)
	mw9f83bdd3_3aa1_47ff_abd6_54e5ce60704a (0.03) / (2.88)
	mwa071fdbe_d498_4620_a7a4_940aa31c8161 (0.03) / (1.44)
	mwf67caf9d_2f4b_4986_abf2_e6090bbb72ce (0.001) / (2.88)
	mw4aea26f6_8860_414c_97f5_40d325196f2e (0.001) / (0.576)
	Metabolite_80 (221.06367608557)
	ModelValue_3 (0)
	ModelValue_4 (0)
	ModelValue_5 (0)
	parameter_1 0
	parameter_2 0
	parameter_3 0
	geneProduct_mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 159.80359735889
	geneProduct 159.80359735889
end parameters
begin compartments
	#volume units: L
	mw53ffe9e6_beef_45c4_90a5_a79197ed506e 3 1.0 #serum
	mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e 3 1.0 #liver
	mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 3 1.0 #gut
	mw8fbcbf3b_47d8_4adc_8ad4_f9fc547d3e87 3 1.0 #peripheral
end compartments
begin molecule types
	#^ bqbiol:isVersionOf uniprot:P05231, uniprot:P05231, uniprot:P05231
	IL6(r,sr)
	#^ bqbiol:hasPart uniprot:P08887, uniprot:P05231, fma:FMA:62871, uniprot:P08887, uniprot:P05231, fma:FMA:62871, uniprot:P08887, uniprot:P05231, fma:FMA:62871
	#^ bqbiol:hasProperty pato:PATO:0001537, pato:PATO:0001537, pato:PATO:0001537
	sR_IL6_sgpFc()
	#^ bqbiol:isVersionOf fma:FMA:62871, fma:FMA:62871, fma:FMA:62871, fma:FMA:62871
	sgpFc()
	#^ bqbiol:hasPart uniprot:P08887, uniprot:P05231, pr:PR:000001868, uniprot:P05231, uniprot:P08887, pr:PR:000001868
	R_IL6_gp130()
	#^ bqbiol:isVersionOf pr:PR:000002089, pr:PR:000002089
	STAT3(p~P~0)
	#^ bqbiol:hasProperty pato:PATO:0001537, pato:PATO:0001537, pato:PATO:0001537
	#^ bqbiol:isVersionOf pr:PR:000001868, pr:PR:000001868, pr:PR:000001868
	sgp130()
	#^ bqbiol:isVersionOf uniprot:P02741, uniprot:P02741
	CRP(CRPExtracellular~CRPExtracellular~0)
	#^ bqbiol:isVersionOf uniprot:P08887
	R(il6)
	#^ bqbiol:hasProperty biomodels.sbo:SBO:0000286, pato:PATO:0002354, biomodels.sbo:SBO:0000286, pato:PATO:0002354
	#^ bqbiol:hasPart uniprot:P08887, uniprot:P05231, pr:PR:000001868, uniprot:P05231, uniprot:P08887, pr:PR:000001868
	Ractive()
	#^ bqbiol:isVersionOf pr:PR:000001868, pr:PR:000001868
	gp130()
	#^ bqbiol:hasPart uniprot:P08887, uniprot:P05231, pr:PR:000001868, uniprot:P05231, uniprot:P08887, pr:PR:000001868, uniprot:P08887, uniprot:P05231, pr:PR:000001868
	#^ bqbiol:hasProperty pato:PATO:0001537, pato:PATO:0001537, pato:PATO:0001537
	sR_IL6_sgp130()
	#^ bqbiol:hasProperty pato:PATO:0001537, pato:PATO:0001537, pato:PATO:0001537
	#^ bqbiol:isVersionOf uniprot:P08887, uniprot:P08887, uniprot:P08887
	sR(il6)
end molecule types
begin seed species
	@mw53ffe9e6_beef_45c4_90a5_a79197ed506e:IL6(r,sr) 0.000435628896551166 #IL6 #mwf626e95e_543f_41e4_aad4_c6bf60ab345b
	@mw53ffe9e6_beef_45c4_90a5_a79197ed506e:sgp130() 3.9 #sgp130 #mwbbbce920_e8dd_4320_9386_fc94bfb2fc99
	@mw53ffe9e6_beef_45c4_90a5_a79197ed506e:sR_IL6_sgp130() 0.0874060669217432 #sR_IL6_sgp130 #mw810ff751_fa4e_4143_bd50_169b3e325e1e
	@mw53ffe9e6_beef_45c4_90a5_a79197ed506e:CRP(CRPExtracellular~0) 221.06367608557 #CRP #mw114aa90f_5f5b_4fe8_9406_361c8489b6a1
	@mw53ffe9e6_beef_45c4_90a5_a79197ed506e:sR(il6) 4.25350679194445 #sR #mw30ae63db_6cd3_4b6f_93ad_3350cd360bcc
	@mw53ffe9e6_beef_45c4_90a5_a79197ed506e:IL6(r,sr!981).sR(il6!981) 0.00109424263781451 #sR_IL6 #mw03db56ac_8dc6_4931_ae82_fef706d2ee3d
	@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:gp130() 0.388958921403941 #gp130 #mw80848184_e2dd_47ce_86d7_7a21479342bd
	@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:R_IL6_gp130() 6.59935877686372e-05 #R_IL6_gp130 #mwd2d9d93a_3bd1_4f17_bac1_baba9ef2d55a
	@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:IL6(r,sr!981).sR(il6!981) 0.000976164943878913 #sR_IL6 #mw4638f126_8cb8_4021_ab41_6ae195743ba0
	@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:R(il6) 0.438235811135574 #R #mw10315fa3_6f13_4618_bda8_a8694bd3c374
	@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:IL6(r,sr) 0.00072566581144648 #IL6 #mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1
	@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:IL6(r!980,sr).R(il6!980) 1.60036523605187e-05 #R_IL6 #mw7d86cc23_a1af_44c3_bdb9_71e9b1bb2a83
	@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:Ractive() 0.765416493681823 #Ractive #mw0eb6c959_d408_45a0_a450_928b8c5876bb
	@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:STAT3(p~0) 0.777537339578334 #STAT3 #mw42054cd7_17af_46da_970c_7f99151906ad
	@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:STAT3(p~P) 9.22246266042167 #pSTAT3 #mw39c2e431_fdc3_4964_be29_6ca856620b1b
	@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:CRP(CRPExtracellular~0) 158.325846781611 #CRP #mwd5313618_89eb_4c8c_bc82_66f10f966349
	@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:sR(il6) 6.08704712819468 #sR #mw2e464cf3_a09c_4b7c_9f3c_06720016a48e
	@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:CRP(CRPExtracellular~CRPExtracellular) 409.775322370541 #CRPExtracellular #mw36ea78c1_ed71_4def_96d3_857a442d7195
	@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:sgp130() 5.5896988923534 #sgp130 #mw147d30ec_478e_4090_b496_128a131d29eb
	@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:sR_IL6_sgp130() 0.116343661809953 #sR_IL6_sgp130 #mwab41493c_6349_45f1_a226_3030cfed0e06
	@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:IL6(r,sr!981).sR(il6!981) 0.00130682388893128 #sR_IL6 #mw7becb5fe_8da8_4285_a821_0d77ad811b62
	@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:gp130() 0.374962692933961 #gp130 #mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca
	@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:R_IL6_gp130() 8.44890497633548e-05 #R_IL6_gp130 #mw824bc3d4_1ac3_4912_9b51_8f14ff1c96b9
	@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:Ractive() 0.980272509547246 #Ractive #mw6cce2109_0e32_4dd9_98ec_41173e8ef07d
	@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:STAT3(p~0) 0.610636013508212 #STAT3 #mw2b255f94_8018_4b99_bde8_918eeac45446
	@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:STAT3(p~P) 9.38936398649179 #pSTAT3 #mw48867e93_f170_44e8_ac7a_185b23e1bf3b
	@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:sR(il6) 6.06410682471754 #sR #mwd31f52cc_04e7_40e0_885f_c7b2d9e62215
	@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:IL6(r,sr) 0.0093481986616084 #IL6 #mw2c9b0499_3325_4394_8af3_bbf653a944a0
	@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:sgp130() 5.56973864471412 #sgp130 #mwd65b5b39_dc1b_4e77_a999_67277a880e5e
	@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:sR_IL6_sgp130() 0.136303909449242 #sR_IL6_sgp130 #mw6335d5d7_c7b0_4bc0_b883_f7ee4915c2c3
	@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:sR_IL6_sgpFc() 5.3253664019487e-28 #sR_IL6_sgpFc #mw2f3d48e0_c9c4_4a0e_aca3_9241eb573296
end seed species
begin observables
	Species IL6_mw53ffe9e6_beef_45c4_90a5_a79197ed506e @mw53ffe9e6_beef_45c4_90a5_a79197ed506e:IL6(r,sr) #IL6
	Species sgp130_mw53ffe9e6_beef_45c4_90a5_a79197ed506e @mw53ffe9e6_beef_45c4_90a5_a79197ed506e:sgp130() #sgp130
	Species sR_IL6_sgp130_mw53ffe9e6_beef_45c4_90a5_a79197ed506e @mw53ffe9e6_beef_45c4_90a5_a79197ed506e:sR_IL6_sgp130() #sR_IL6_sgp130
	Species CRP_mw53ffe9e6_beef_45c4_90a5_a79197ed506e @mw53ffe9e6_beef_45c4_90a5_a79197ed506e:CRP(CRPExtracellular~0) #CRP
	Species sR_mw53ffe9e6_beef_45c4_90a5_a79197ed506e @mw53ffe9e6_beef_45c4_90a5_a79197ed506e:sR(il6) #sR
	Species sR_IL6_mw53ffe9e6_beef_45c4_90a5_a79197ed506e @mw53ffe9e6_beef_45c4_90a5_a79197ed506e:IL6(r,sr!981).sR(il6!981) #sR_IL6
	Species sgpFc_mw53ffe9e6_beef_45c4_90a5_a79197ed506e @mw53ffe9e6_beef_45c4_90a5_a79197ed506e:sgpFc() #sgpFc
	Species sR_IL6_sgpFc_mw53ffe9e6_beef_45c4_90a5_a79197ed506e @mw53ffe9e6_beef_45c4_90a5_a79197ed506e:sR_IL6_sgpFc() #sR_IL6_sgpFc
	Species gp130_mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e @mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:gp130() #gp130
	Species R_IL6_gp130_mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e @mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:R_IL6_gp130() #R_IL6_gp130
	Species sR_IL6_mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e @mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:IL6(r,sr!981).sR(il6!981) #sR_IL6
	Species R_mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e @mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:R(il6) #R
	Species IL6_mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e @mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:IL6(r,sr) #IL6
	Species R_IL6_mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e @mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:IL6(r!980,sr).R(il6!980) #R_IL6
	Species Ractive_mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e @mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:Ractive() #Ractive
	Species STAT3_mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e @mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:STAT3(p~0) #STAT3
	Species pSTAT3_mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e @mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:STAT3(p~P) #pSTAT3
	Species CRP_mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e @mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:CRP(CRPExtracellular~0) #CRP
	Species sR_mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e @mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:sR(il6) #sR
	Species CRPExtracellular_mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e @mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:CRP(CRPExtracellular~CRPExtracellular) #CRPExtracellular
	Species sgp130_mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e @mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:sgp130() #sgp130
	Species sR_IL6_sgp130_mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e @mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:sR_IL6_sgp130() #sR_IL6_sgp130
	Species sR_IL6_sgpFc_mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e @mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:sR_IL6_sgpFc() #sR_IL6_sgpFc
	Species sgpFc_mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e @mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:sgpFc() #sgpFc
	Species sR_IL6_mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 @mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:IL6(r,sr!981).sR(il6!981) #sR_IL6
	Species gp130_mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 @mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:gp130() #gp130
	Species R_IL6_gp130_mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 @mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:R_IL6_gp130() #R_IL6_gp130
	Species Ractive_mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 @mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:Ractive() #Ractive
	Species STAT3_mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 @mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:STAT3(p~0) #STAT3
	Species pSTAT3_mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 @mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:STAT3(p~P) #pSTAT3
	Species sR_mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 @mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:sR(il6) #sR
	Species IL6_mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 @mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:IL6(r,sr) #IL6
	Species sgp130_mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 @mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:sgp130() #sgp130
	Species sR_IL6_sgp130_mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 @mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:sR_IL6_sgp130() #sR_IL6_sgp130
	Species sgpFc_mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 @mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:sgpFc() #sgpFc
	Species sR_IL6_sgpFc_mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 @mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:sR_IL6_sgpFc() #sR_IL6_sgpFc
	Species sgpFc_mw8fbcbf3b_47d8_4adc_8ad4_f9fc547d3e87 @mw8fbcbf3b_47d8_4adc_8ad4_f9fc547d3e87:sgpFc() #sgpFc
end observables
begin functions
	CRP_ar() = mw92d854a7_8aaf_458e_b5e2_20a63ce9b654*pSTAT3_mwe9501423_9fb4_494b_b5b6_288f3fcb17b5/(mw08950572_81b0_4570_b2e4_b9c3462c1425 + pSTAT3_mwe9501423_9fb4_494b_b5b6_288f3fcb17b5)
	CRPSuppression_____ar() = (-100*CRP_ar + 100*Metabolite_80)/Metabolite_80
	geneProduct_ar() = mw92d854a7_8aaf_458e_b5e2_20a63ce9b654*pSTAT3_mwe9501423_9fb4_494b_b5b6_288f3fcb17b5/(mw08950572_81b0_4570_b2e4_b9c3462c1425 + pSTAT3_mwe9501423_9fb4_494b_b5b6_288f3fcb17b5)
	fRate9() = mw9442cd0e_4d7c_4ba6_a695_f84919bdf569/(STAT3_mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e + mwe8fc1900_f07d_468b_b5c8_15400a583c3d)
	fRate10() = mwd36b0261_2480_4cab_9222_2cf8fb0e65dc/(mwfd291862_195f_4979_94b5_b4e5ae1b7d52 + pSTAT3_mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e)
	fRate18() = mw9442cd0e_4d7c_4ba6_a695_f84919bdf569/(STAT3_mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 + mwe8fc1900_f07d_468b_b5c8_15400a583c3d)
	fRate19() = mwd36b0261_2480_4cab_9222_2cf8fb0e65dc/(mwfd291862_195f_4979_94b5_b4e5ae1b7d52 + pSTAT3_mwe9501423_9fb4_494b_b5b6_288f3fcb17b5)
	fRate22() = mw1667a8e0_9d20_4e59_ba51_596148aba787/(Ractive_mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e + mwfcf06900_5f2f_4bb3_bb1f_12023612b8a8)
	fRate23() = mw1667a8e0_9d20_4e59_ba51_596148aba787/(Ractive_mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 + mwfcf06900_5f2f_4bb3_bb1f_12023612b8a8)
end functions
begin reaction rules
	reaction_1: sR(il6)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e + IL6(r,sr)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> IL6(r,sr!981)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e.sR(il6!981)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e kRLOn,kRLOff #Modifiers(mw03db56ac_8dc6_4931_ae82_fef706d2ee3d, mw30ae63db_6cd3_4b6f_93ad_3350cd360bcc, mwf626e95e_543f_41e4_aad4_c6bf60ab345b)
	reaction_2: IL6(r,sr!981)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e.sR(il6!981)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e + sgp130()@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> sR_IL6_sgp130()@mw53ffe9e6_beef_45c4_90a5_a79197ed506e kgp130On,kgp130Off #Modifiers(mw03db56ac_8dc6_4931_ae82_fef706d2ee3d, mw810ff751_fa4e_4143_bd50_169b3e325e1e, mwbbbce920_e8dd_4320_9386_fc94bfb2fc99)
	reaction_3: 0  -> IL6(r,sr)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e kIL6Synth
	reaction_4: IL6(r,sr)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e -> 0  kIL6Decay #Modifiers(mwf626e95e_543f_41e4_aad4_c6bf60ab345b)
	reaction_5: CRP(CRPExtracellular~0)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e -> 0  kCRPDecay #Modifiers(mw114aa90f_5f5b_4fe8_9406_361c8489b6a1)
	reaction_6: IL6(r,sr!981)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.sR(il6!981)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e + gp130()@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e <-> R_IL6_gp130()@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e kgp130On,kgp130Off #Modifiers(mw4638f126_8cb8_4021_ab41_6ae195743ba0, mw80848184_e2dd_47ce_86d7_7a21479342bd, mwd2d9d93a_3bd1_4f17_bac1_baba9ef2d55a)
	reaction_7: R(il6)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e + IL6(r,sr)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e <-> IL6(r!980,sr)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.R(il6!980)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e kRLOn,kRLOff #Modifiers(mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1, mw10315fa3_6f13_4618_bda8_a8694bd3c374, mw7d86cc23_a1af_44c3_bdb9_71e9b1bb2a83)
	reaction_8: IL6(r!980,sr)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.R(il6!980)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e + gp130()@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e <-> R_IL6_gp130()@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e kgp130On,kgp130Off #Modifiers(mw7d86cc23_a1af_44c3_bdb9_71e9b1bb2a83, mw80848184_e2dd_47ce_86d7_7a21479342bd, mwd2d9d93a_3bd1_4f17_bac1_baba9ef2d55a)
	reaction_16: R_IL6_gp130()@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e -> Ractive()@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e kRAct #Modifiers(mwd2d9d93a_3bd1_4f17_bac1_baba9ef2d55a)
	reaction_9: STAT3(p~0)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e + Ractive()@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e -> STAT3(p~P)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e + Ractive()@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e fRate9() #Modifiers(mw0eb6c959_d408_45a0_a450_928b8c5876bb, mw42054cd7_17af_46da_970c_7f99151906ad)
	reaction_10: STAT3(p~P)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e -> STAT3(p~0)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e fRate10() #Modifiers(mw39c2e431_fdc3_4964_be29_6ca856620b1b)
	reaction_15: R(il6)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e -> 0  kRdeg #Modifiers(mw10315fa3_6f13_4618_bda8_a8694bd3c374)
	reaction_11: IL6(r!980,sr)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.R(il6!980)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e -> 0  kRint #Modifiers(mw7d86cc23_a1af_44c3_bdb9_71e9b1bb2a83)
	reaction_12: R_IL6_gp130()@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e -> 0  kRint #Modifiers(mwd2d9d93a_3bd1_4f17_bac1_baba9ef2d55a)
	reaction_13: Ractive()@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e -> 0  mwf44f7f27_5bb1_4c7f_8964_560fa5e1743a #Modifiers(mw0eb6c959_d408_45a0_a450_928b8c5876bb)
	reaction_14: 0  -> R(il6)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e kRsynth
	reaction_41: IL6(r,sr!981)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5.sR(il6!981)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 + gp130()@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 <-> R_IL6_gp130()@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 kgp130On,kgp130Off #Modifiers(mw7becb5fe_8da8_4285_a821_0d77ad811b62, mw824bc3d4_1ac3_4912_9b51_8f14ff1c96b9, mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca)
	reaction_46: R_IL6_gp130()@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 -> Ractive()@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 kRAct #Modifiers(mw824bc3d4_1ac3_4912_9b51_8f14ff1c96b9)
	reaction_42: STAT3(p~0)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 + Ractive()@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 -> STAT3(p~P)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 + Ractive()@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 fRate18() #Modifiers(mw2b255f94_8018_4b99_bde8_918eeac45446, mw6cce2109_0e32_4dd9_98ec_41173e8ef07d)
	reaction_43: STAT3(p~P)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 -> STAT3(p~0)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 fRate19() #Modifiers(mw48867e93_f170_44e8_ac7a_185b23e1bf3b)
	reaction_44: R_IL6_gp130()@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 -> 0  kRint #Modifiers(mw824bc3d4_1ac3_4912_9b51_8f14ff1c96b9)
	reaction_45: Ractive()@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 -> 0  mwf44f7f27_5bb1_4c7f_8964_560fa5e1743a #Modifiers(mw6cce2109_0e32_4dd9_98ec_41173e8ef07d)
	mwb675e13a_26c0_4b18_a8c3_0f5a62090ba4: Ractive()@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e -> R_IL6_gp130()@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e fRate22() #Modifiers(mw0eb6c959_d408_45a0_a450_928b8c5876bb)
	mw64df7c9e_35da_4c7f_be56_c5dabfb060b6: Ractive()@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 -> R_IL6_gp130()@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 fRate23() #Modifiers(mw6cce2109_0e32_4dd9_98ec_41173e8ef07d)
	mw391f3b8e_5649_4851_b2e2_782cb3e015b6: 0  -> gp130()@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e kRsynth
	mw4a00a3a4_778f_4952_8100_2dc3cc2b7046: gp130()@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e -> 0  kRdeg #Modifiers(mw80848184_e2dd_47ce_86d7_7a21479342bd)
	mw6db30657_4e56_4c3a_8575_9c67393dde4f: 0  -> gp130()@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 kRsynth
	mw6f470e13_f0e4_4294_83d8_59dd5670d10c: gp130()@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 -> 0  kRdeg #Modifiers(mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca)
	mwfb35eca9_7afc_4ba8_a46c_738cab57eb9f: sR(il6)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> sR(il6)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 mwc67e1333_079a_4bea_9b4f_0a1b15ddd7bb,mwce10678d_8197_408c_ad47_1daec8104cd8 #Modifiers(mw30ae63db_6cd3_4b6f_93ad_3350cd360bcc, mwd31f52cc_04e7_40e0_885f_c7b2d9e62215)
	mw61d2af92_6da5_41ce_b90e_aa6f430e6ba1: IL6(r,sr)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> IL6(r,sr)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 mwc67e1333_079a_4bea_9b4f_0a1b15ddd7bb,mwce10678d_8197_408c_ad47_1daec8104cd8 #Modifiers(mwf626e95e_543f_41e4_aad4_c6bf60ab345b, mw2c9b0499_3325_4394_8af3_bbf653a944a0)
	mw4c099d5c_200f_474e_8ec1_59e9223a8afd: sR(il6)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 + IL6(r,sr)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 <-> IL6(r,sr!981)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5.sR(il6!981)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 kRLOn,kRLOff #Modifiers(mw2c9b0499_3325_4394_8af3_bbf653a944a0, mw7becb5fe_8da8_4285_a821_0d77ad811b62, mwd31f52cc_04e7_40e0_885f_c7b2d9e62215)
	mwbe8567ce_3349_4442_8b12_53cd9bc168e7: IL6(r,sr!981)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e.sR(il6!981)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> IL6(r,sr!981)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5.sR(il6!981)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 mwc67e1333_079a_4bea_9b4f_0a1b15ddd7bb,mwce10678d_8197_408c_ad47_1daec8104cd8 #Modifiers(mw03db56ac_8dc6_4931_ae82_fef706d2ee3d, mw7becb5fe_8da8_4285_a821_0d77ad811b62)
	mw12a9fa7e_a273_4c1e_b970_ed33f3a9a705: sR(il6)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> sR(il6)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e mwc67e1333_079a_4bea_9b4f_0a1b15ddd7bb,mwce10678d_8197_408c_ad47_1daec8104cd8 #Modifiers(mw30ae63db_6cd3_4b6f_93ad_3350cd360bcc, mw2e464cf3_a09c_4b7c_9f3c_06720016a48e)
	mw1046000b_e1e8_4f6f_82a1_532d2aa793bb: IL6(r,sr)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> IL6(r,sr)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e mwc67e1333_079a_4bea_9b4f_0a1b15ddd7bb,mwce10678d_8197_408c_ad47_1daec8104cd8 #Modifiers(mwf626e95e_543f_41e4_aad4_c6bf60ab345b, mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1)
	mw8e8b65a8_6830_4091_9a40_19645e8fe554: IL6(r,sr!981)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e.sR(il6!981)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> IL6(r,sr!981)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.sR(il6!981)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e mwc67e1333_079a_4bea_9b4f_0a1b15ddd7bb,mwce10678d_8197_408c_ad47_1daec8104cd8 #Modifiers(mw03db56ac_8dc6_4931_ae82_fef706d2ee3d, mw4638f126_8cb8_4021_ab41_6ae195743ba0)
	mwa812f08f_1035_42bd_82d2_72d691308f88: sR(il6)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e + IL6(r,sr)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e <-> IL6(r,sr!981)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.sR(il6!981)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e kRLOn,kRLOff #Modifiers(mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1, mw2e464cf3_a09c_4b7c_9f3c_06720016a48e, mw4638f126_8cb8_4021_ab41_6ae195743ba0)
	mwab0012ac_e5f2_4904_9893_820fd210402e: CRP(CRPExtracellular~0)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e -> CRP(CRPExtracellular~CRPExtracellular)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e mw862f1480_c60c_4863_a565_b2c1c77e238e #Modifiers(mwd5313618_89eb_4c8c_bc82_66f10f966349)
	mwcdc24bd4_d9e4_47fe_8300_d222d853111c: CRP(CRPExtracellular~0)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> CRP(CRPExtracellular~CRPExtracellular)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e mwc67e1333_079a_4bea_9b4f_0a1b15ddd7bb,mwce10678d_8197_408c_ad47_1daec8104cd8 #Modifiers(mw114aa90f_5f5b_4fe8_9406_361c8489b6a1, mw36ea78c1_ed71_4def_96d3_857a442d7195)
	mwff2ebcf1_dcf1_47b9_9cac_7306fc6f7f76: 0  -> CRP(CRPExtracellular~0)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e mw65c85954_5ca0_4df2_9e22_ff2aa3fbe3f1
	mw1c5a5ff7_5130_490f_a740_6a744ccf8a94: sgp130()@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> sgp130()@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 mwc67e1333_079a_4bea_9b4f_0a1b15ddd7bb,mwce10678d_8197_408c_ad47_1daec8104cd8 #Modifiers(mwbbbce920_e8dd_4320_9386_fc94bfb2fc99, mwd65b5b39_dc1b_4e77_a999_67277a880e5e)
	mw7b56053c_7256_4703_a8c3_4fd46b2c23d0: sgp130()@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> sgp130()@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e mwc67e1333_079a_4bea_9b4f_0a1b15ddd7bb,mwce10678d_8197_408c_ad47_1daec8104cd8 #Modifiers(mwbbbce920_e8dd_4320_9386_fc94bfb2fc99, mw147d30ec_478e_4090_b496_128a131d29eb)
	mw8be158f1_ea81_45bf_80d4_6e31cd83fe6c: sgp130()@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 + IL6(r,sr!981)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5.sR(il6!981)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 <-> sR_IL6_sgp130()@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 kgp130On,kgp130Off #Modifiers(mw6335d5d7_c7b0_4bc0_b883_f7ee4915c2c3, mw7becb5fe_8da8_4285_a821_0d77ad811b62, mwd65b5b39_dc1b_4e77_a999_67277a880e5e)
	mwd77df15b_fed7_41a8_a3d6_b0f6c590c5f6: IL6(r,sr!981)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.sR(il6!981)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e + sgp130()@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e <-> sR_IL6_sgp130()@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e kgp130On,kgp130Off #Modifiers(mw147d30ec_478e_4090_b496_128a131d29eb, mw4638f126_8cb8_4021_ab41_6ae195743ba0, mwab41493c_6349_45f1_a226_3030cfed0e06)
	mw01babcdf_0f03_46b0_81b1_201cc846e361: sR_IL6_sgp130()@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> sR_IL6_sgp130()@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 mwc67e1333_079a_4bea_9b4f_0a1b15ddd7bb,mwce10678d_8197_408c_ad47_1daec8104cd8 #Modifiers(mw810ff751_fa4e_4143_bd50_169b3e325e1e, mw6335d5d7_c7b0_4bc0_b883_f7ee4915c2c3)
	mwae5dbb44_7de5_46ab_8c20_ac4f8956b0f0: sR_IL6_sgp130()@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> sR_IL6_sgp130()@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e mwc67e1333_079a_4bea_9b4f_0a1b15ddd7bb,mwce10678d_8197_408c_ad47_1daec8104cd8 #Modifiers(mw810ff751_fa4e_4143_bd50_169b3e325e1e, mwab41493c_6349_45f1_a226_3030cfed0e06)
	mw432fde6e_59ab_47f0_9fb1_086433a602e3: 0  -> sR(il6)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e mwc4c58db7_5535_4590_aaa5_bbc8ed53cdab
	mw41c27823_d7ee_4554_9eac_3d5beec8e854: sR(il6)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e -> 0  mw88a75379_f9a1_4acc_baeb_94c32bb736a5 #Modifiers(mw30ae63db_6cd3_4b6f_93ad_3350cd360bcc)
	mw50c6744c_e883_4612_8663_e38750cbad1b: 0  -> sgp130()@mw53ffe9e6_beef_45c4_90a5_a79197ed506e mw1f41474c_c399_4a60_a53a_9926dd092e8d
	mwb6a99eb5_ea4c_4733_98dd_1daf5ec6b0db: sgp130()@mw53ffe9e6_beef_45c4_90a5_a79197ed506e -> 0  mwbcb5a310_9b67_405e_89ec_43d25e8cc93d #Modifiers(mwbbbce920_e8dd_4320_9386_fc94bfb2fc99)
	mw1ce0c484_681f_4d85_8ffe_392d0c100cfa: 0  -> IL6(r,sr)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 mwa8d72918_f6c2_4d81_bf3b_fc2b464d5e69
	mwf913ea0b_785a_4701_ac91_b18ab5dd5a89: IL6(r,sr)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 -> 0  mw06241335_b5f2_47ed_bdcc_ef77b68a2b98 #Modifiers(mw2c9b0499_3325_4394_8af3_bbf653a944a0)
	mw71d90b81_8211_4039_8807_12a7fe03206c: CRP(CRPExtracellular~0)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e -> sR(il6)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e + CRP(CRPExtracellular~0)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e mw5832a2dc_ee18_44df_aa59_ccb21cb74df2 #Modifiers(mw114aa90f_5f5b_4fe8_9406_361c8489b6a1)
	mwdf4ba845_7271_4ada_b43f_fdac83df3b5c: sgpFc()@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> sgpFc()@mw8fbcbf3b_47d8_4adc_8ad4_f9fc547d3e87 mwf67caf9d_2f4b_4986_abf2_e6090bbb72ce,mw4aea26f6_8860_414c_97f5_40d325196f2e #Modifiers(mwf345ed7a_0622_403c_b816_c8749a2c9ded, mwbc2f5464_81e5_43fd_8b39_f5a2756af72f)
	mwc32a28fa_525c_44af_8d2c_e728c21eb90a: sgpFc()@mw53ffe9e6_beef_45c4_90a5_a79197ed506e + IL6(r,sr!981)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e.sR(il6!981)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> sR_IL6_sgpFc()@mw53ffe9e6_beef_45c4_90a5_a79197ed506e kgp130On,kgp130Off #Modifiers(mw03db56ac_8dc6_4931_ae82_fef706d2ee3d, mwa2d8dd1c_bb9a_4552_8738_e24671651c1d, mwf345ed7a_0622_403c_b816_c8749a2c9ded)
	mw14d351b9_623a_48e8_a21c_854411039120: sR_IL6_sgpFc()@mw53ffe9e6_beef_45c4_90a5_a79197ed506e -> 0  mwbd1d5bc3_d4b9_4aec_9b86_6f776da20a30 #Modifiers(mwa2d8dd1c_bb9a_4552_8738_e24671651c1d)
	mwba7f4605_8571_439b_b3ab_eb0b43808db8: sgpFc()@mw53ffe9e6_beef_45c4_90a5_a79197ed506e -> 0  mwbd1d5bc3_d4b9_4aec_9b86_6f776da20a30 #Modifiers(mwf345ed7a_0622_403c_b816_c8749a2c9ded)
	mw5be6711a_526a_4a58_80c6_d353dcabdf87: sR_IL6_sgpFc()@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 -> 0  mwbd1d5bc3_d4b9_4aec_9b86_6f776da20a30 #Modifiers(mw2f3d48e0_c9c4_4a0e_aca3_9241eb573296)
	mw1d3068d7_5679_41ee_9892_984e33012070: sgpFc()@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 + IL6(r,sr!981)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5.sR(il6!981)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 <-> sR_IL6_sgpFc()@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 kgp130On,kgp130Off #Modifiers(mw2f3d48e0_c9c4_4a0e_aca3_9241eb573296, mw7becb5fe_8da8_4285_a821_0d77ad811b62, mwf7796221_1fea_4274_a93e_c00adbf5778c)
	mwb341c690_7147_46a1_8577_201598de3bf1: sgpFc()@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e + IL6(r,sr!981)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.sR(il6!981)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e <-> sR_IL6_sgpFc()@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e kgp130On,kgp130Off #Modifiers(mw1d9426a3_e1e9_49e0_ad77_eb6833be398a, mw3667a5e1_02c9_44a0_acb4_b0431faa822d, mw4638f126_8cb8_4021_ab41_6ae195743ba0)
	mw5d9fcd0c_ca08_4444_b509_2ea4777e0025: sR_IL6_sgpFc()@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e -> 0  mwbd1d5bc3_d4b9_4aec_9b86_6f776da20a30 #Modifiers(mw1d9426a3_e1e9_49e0_ad77_eb6833be398a)
	mw131e3c9d_e77d_48c0_bdbb_77b2c10aaf3d: sgpFc()@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> sgpFc()@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e mw640ca705_e089_4c64_a5f4_9562317e8c76,mw43ccad8c_cabf_4eaf_90d5_e06ae43be2cb #Modifiers(mwf345ed7a_0622_403c_b816_c8749a2c9ded, mw3667a5e1_02c9_44a0_acb4_b0431faa822d)
	mw14940d1f_6a1f_47cb_8170_801ba645f4c1: sgpFc()@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> sgpFc()@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 mw9f83bdd3_3aa1_47ff_abd6_54e5ce60704a,mwa071fdbe_d498_4620_a7a4_940aa31c8161 #Modifiers(mwf345ed7a_0622_403c_b816_c8749a2c9ded, mwf7796221_1fea_4274_a93e_c00adbf5778c)
	mwb62106e7_e959_4a1d_9a00_b36d4e19a48f: sR_IL6_sgpFc()@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> sR_IL6_sgpFc()@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e mw640ca705_e089_4c64_a5f4_9562317e8c76,mw43ccad8c_cabf_4eaf_90d5_e06ae43be2cb #Modifiers(mwa2d8dd1c_bb9a_4552_8738_e24671651c1d, mw1d9426a3_e1e9_49e0_ad77_eb6833be398a)
	mwad648b6c_45ca_4f41_9747_06db1f6060fc: sR_IL6_sgpFc()@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> sR_IL6_sgpFc()@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 mw9f83bdd3_3aa1_47ff_abd6_54e5ce60704a,mwa071fdbe_d498_4620_a7a4_940aa31c8161 #Modifiers(mwa2d8dd1c_bb9a_4552_8738_e24671651c1d, mw2f3d48e0_c9c4_4a0e_aca3_9241eb573296)
	mw2ae288ab_7d03_4a84_a024_c711ad2b77e6: sgpFc()@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e -> 0  mwbd1d5bc3_d4b9_4aec_9b86_6f776da20a30 #Modifiers(mw3667a5e1_02c9_44a0_acb4_b0431faa822d)
	mw9629d028_fcc0_4886_9e4d_36eecdb0381d: sgpFc()@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 -> 0  mwbd1d5bc3_d4b9_4aec_9b86_6f776da20a30 #Modifiers(mwf7796221_1fea_4274_a93e_c00adbf5778c)
end reaction rules
end model
