###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000538', 'http://identifiers.org/biomodels.db/MODEL1408070000']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/10910361']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9615', 'http://identifiers.org/taxonomy/9685', 'http://identifiers.org/taxonomy/9606', 'http://identifiers.org/taxonomy/10116', 'http://identifiers.org/taxonomy/10090']
#@BQB_HAS_VERSION:['http://identifiers.org/doid/DOID:1443', 'http://identifiers.org/doid/DOID:5679', 'http://identifiers.org/doid/DOID:5327', 'http://identifiers.org/doid/DOID:14330', 'http://identifiers.org/doid/DOID:0050633', 'http://identifiers.org/doid/DOID:12858', 'http://identifiers.org/doid/DOID:8466']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0051402']
#@creatorEmail:'lloret@ebi.ac.uk'
#@creatorName:'Lloret i Villas Audald'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 3 molecules and 0 reactions. The translated model has 2 molecules and 2 rules'
###
begin model
begin parameters
	Munr 0.278
	Mupcd 0.223
	Rrom 0.103
	ONLrom_0 40.947
	Murom 0.0708
	ONLrom 100.0*exp(0.687378640776699*exp(-0.103*time()) - 0.687378640776699) #original 100.0substance/volume
end parameters
begin molecule types
	ONLnr()
	ONLpcd()
end molecule types
begin seed species
	ONLnr() 6.022000000000001e+22 # (100.0 * 0.001)mol/L * 6.022e23/mol *1.0L #ONLnr #ONLnr
	ONLpcd() 6.022000000000001e+22 #original 100.0substance/volume #ONLpcd #ONLpcd
end seed species
begin observables
	Species ONLnr ONLnr() #ONLnr
	Species ONLpcd ONLpcd() #ONLpcd
end observables
begin functions
	arRateONLpcd() = -Mupcd*ONLpcd
	arRateONLnr() = -Munr*ONLnr
	ONLrom_ar() = 100*exp(Murom*(exp(-Rrom*time()) - 1)/Rrom)
end functions
begin reaction rules
	0  -> ONLnr() arRateONLnr #rateLaw
	0  -> ONLpcd() arRateONLpcd #rateLaw
end reaction rules
end model
