###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000555', 'http://identifiers.org/biomodels.db/MODEL1411100000']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/20602358']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:1990000']
#@BQB_HAS_PROPERTY:['http://identifiers.org/doid/DOID:14330', 'http://identifiers.org/doid/DOID:10652']
#@creatorEmail:'lloret@ebi.ac.uk'
#@creatorName:'Lloret i Villas Audald'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 1 molecules and 0 reactions. The translated model has 0 molecules and 0 rules'
###
begin model
begin parameters
	omega 35.3
	n 7.2
	__e__ 2.718
	k 0.205
	C 0.00069
end parameters
begin molecule types
end molecule types
begin seed species
end seed species
begin observables
end observables
begin functions
	t1() = (-__e__ + ln(1/C) + 1)/k
	ka() = k/__e__
	a() = n*exp((1 - n)/n) - 1
	Amyloid_ar() = 1 - exp(-(time()/omega)^n)
end functions
begin reaction rules
end reaction rules
end model
