###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000557', 'http://identifiers.org/biomodels.db/MODEL1410300001']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/23847209']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0070372']
#@BQB_OCCURS_IN:['http://identifiers.org/bto/BTO:0000567']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 25 molecules and 22 reactions. The translated model has 4 molecules and 24 rules'
###
begin model
begin parameters
	k_ERKin 0.144
	k_ERKout 1.08
	k_pERKin 0.144
	k_pERKout 1.08
	k_ppERKin 0.66
	k_ppERKout 0.78
	k1_ES 1.0
	k2_ES 60.0
	k1_pES 1.0
	k2_pES 60.0
	k1_ppES 1.0
	k2_ppES 60.0
	k1_ERKc 1.0
	k2_ERKc 350.0
	k3_ERKc 13.2
	kd1_ppERKc 1.0
	kd2_ppERKc 60.0
	kd3_ppERKc 0.388
	kd1_pERKc 1.0
	kd2_pERKc 160.0
	kd3_pERKc 0.432
	kd2_ERKc 5160.0
	k1_ERKn 1.0
	k2_ERKn 350.0
	k3_ERKn 13.2
	kd1_ppERKn 1.0
	kd2_ppERKn 60.0
	kd3_ppERKn 38.88
	kd1_pERKn 1.0
	kd2_pERKn 160.0
	kd3_pERKn 43.2
	kd2_ERKn 160.0
	k_ppMEKc_tot 100.0
	actCompl 1e-09
	duspn_basal 1.0
	duspn_ind 20.0
	Kduspn 1000.0
	Tduspn 10.0
	v2 10.0
	TDUSPn 45.0
	scale_cytERK_tot 1.0
	scale_nucERK_tot 1.0
	scale_cellERK_tot 1.0
	scale_cytppERK_tot 1.0
	scale_nucppERK_tot 1.0
	scale_cellppERK_tot 0.0193861307997638
	scale_tDUSPn 1.0
	scale_tERK_STYXn 1.0
	kd1_ERKc 0
	kd1_ERKn 0
end parameters
begin compartments
	#volume units: L
	cytosol 3 0.94
	nucleus 3 0.22
end compartments
begin molecule types
	DUSP(c~C~0,erk,n~N~0)
	#^ bqbiol:isVersionOf uniprot:Q13115
	duspn()
	ERK(ERK_ppMEKc~ERK_ppMEKc~0,c~C~0,dusp,n~N~0,p~P~0,p2~P~0,styxn)
	#^ bqbiol:isVersionOf uniprot:Q8WUJ0
	STYXn(erk)
end molecule types
begin seed species
	@cytosol:ERK(ERK_ppMEKc~0,c~C,dusp,n~0,p~0,p2~0,styxn) 3.2407393e+26 # 572.5mol/L * 6.022e23/mol *0.94L #ERKc #ERKc
	@cytosol:DUSP(c~C,erk,n~0) 5.66068e+25 #original 100.0mol/L #DUSPc #DUSPc
	@nucleus:ERK(ERK_ppMEKc~0,c~0,dusp,n~N,p~0,p2~0,styxn) 2.160681556e+26 #original 1630.9mol/L #ERKn #ERKn
	@nucleus:STYXn(erk) 3.97452e+26 #original 3000.0mol/L #STYXn #STYXn
	@nucleus:duspn() 1.32484e+23 #original 1.0mol/L #duspn #duspn
	@nucleus:DUSP(c~0,erk,n~N) 1.3248400000000002e+24 #original 10.0mol/L #DUSPn #DUSPn
end seed species
begin observables
	Species ERKc_cytosol @cytosol:ERK(ERK_ppMEKc~0,c~C,dusp,n~0,p~0,p2~0,styxn) #ERKc
	Species pERKc_cytosol @cytosol:ERK(ERK_ppMEKc~0,c~C,dusp,n~0,p~P,p2~0,styxn) #pERKc
	Species ppERKc_cytosol @cytosol:ERK(ERK_ppMEKc~0,c~C,dusp,n~0,p~P,p2~P,styxn) #ppERKc
	Species ERK_ppMEKc_cytosol @cytosol:ERK(ERK_ppMEKc~ERK_ppMEKc,c~C,dusp,n~0,p~P,p2~0,styxn) #ERK_ppMEKc
	Species pERK_ppMEKc_cytosol @cytosol:ERK(ERK_ppMEKc~ERK_ppMEKc,c~C,dusp,n~0,p~P,p2~P,styxn) #pERK_ppMEKc
	Species DUSPc_cytosol @cytosol:DUSP(c~C,erk,n~0) #DUSPc
	Species pERK_DUSPc_cytosol @cytosol:ERK(ERK_ppMEKc~0,c~0,dusp!102,n~0,p~P,p2~0,styxn).DUSP(c~C,erk!102,n~0) #pERK_DUSPc
	Species ppERK_DUSPc_cytosol @cytosol:ERK(ERK_ppMEKc~0,c~0,dusp!102,n~0,p~P,p2~P,styxn).DUSP(c~C,erk!102,n~0) #ppERK_DUSPc
	Species ERKn_nucleus @nucleus:ERK(ERK_ppMEKc~0,c~0,dusp,n~N,p~0,p2~0,styxn) #ERKn
	Species pERKn_nucleus @nucleus:ERK(ERK_ppMEKc~0,c~0,dusp,n~N,p~P,p2~0,styxn) #pERKn
	Species ppERKn_nucleus @nucleus:ERK(ERK_ppMEKc~0,c~0,dusp,n~N,p~P,p2~P,styxn) #ppERKn
	Species pERK_DUSPn_nucleus @nucleus:ERK(ERK_ppMEKc~0,c~0,dusp!102,n~0,p~P,p2~0,styxn).DUSP(c~0,erk!102,n~N) #pERK_DUSPn
	Species ppERK_DUSPn_nucleus @nucleus:ERK(ERK_ppMEKc~0,c~0,dusp!102,n~0,p~P,p2~P,styxn).DUSP(c~0,erk!102,n~N) #ppERK_DUSPn
	Species STYXn_nucleus @nucleus:STYXn(erk) #STYXn
	Species ERK_STYXn_nucleus @nucleus:ERK(ERK_ppMEKc~0,c~0,dusp,n~0,p~0,p2~0,styxn!101).STYXn(erk!101) #ERK_STYXn
	Species pERK_STYXn_nucleus @nucleus:ERK(ERK_ppMEKc~0,c~0,dusp,n~0,p~P,p2~0,styxn!101).STYXn(erk!101) #pERK_STYXn
	Species ppERK_STYXn_nucleus @nucleus:ERK(ERK_ppMEKc~0,c~0,dusp,n~0,p~P,p2~P,styxn!101).STYXn(erk!101) #ppERK_STYXn
	Species duspn_nucleus @nucleus:duspn() #duspn
	Species DUSPn_nucleus @nucleus:DUSP(c~0,erk,n~N) #DUSPn
end observables
begin functions
	u_ppMEKc_tot_ar() =  if((time()<-1),(0),if((time()<0),(0),if((time()<120),(1),(1))))
	ppMEKc_tot_ar() = k_ppMEKc_tot*u_ppMEKc_tot_ar
	ERK_ppMEKc_obs_ar() = ERK_ppMEKc_cytosol
	ppERKc_obs_ar() = ppERKc_cytosol
	pERKc_obs_ar() = pERKc_cytosol
	ERKc_obs_ar() = ERKc_cytosol
	fRate0() = -1.0*ERK_ppMEKc_cytosol*k2_ERKc + 1.0*ERKc_cytosol*k1_ERKc*(-0.94*ERK_ppMEKc_cytosol - pERK_ppMEKc_cytosol + 0.94*ppMEKc_tot_cytosol)
	fRate2() = 1.0*k1_ERKc*pERKc_cytosol*(-ERK_ppMEKc_cytosol - 0.94*pERK_ppMEKc_cytosol + 0.94*ppMEKc_tot_cytosol) - 1.0*k2_ERKc*pERK_ppMEKc_cytosol
	fRate4() = 4.54545454545455*k_ERKin
	fRate4m() = 1.06382978723404*k_ERKout
	fRate5() = 4.54545454545455*k_pERKin
	fRate5m() = 1.06382978723404*k_pERKout
	fRate6() = 4.54545454545455*k_ppERKin
	fRate6m() = 1.06382978723404*k_ppERKout
	fRate7() = 0.999999999999998*kd1_ppERKc
	fRate9() = 0.999999999999998*kd1_pERKc
	fRate11() = 1.0*kd1_ppERKn
	fRate13() = 1.0*kd1_pERKn
	fRate15() = 3.15*duspn_basal*(Kduspn^2 + duspn_ind*ppERKn_nucleus^2 + 0.22*ppERKn_nucleus^2)/(Tduspn*(Kduspn^2 + 0.22*ppERKn_nucleus^2))
	fRate16() = 0.693/Tduspn
	fRate17() = 3.15*duspn_nucleus*v2/TDUSPn
	fRate18() = 0.693/TDUSPn
	fRate19() = 1.0*k1_ES
	fRate20() = 1.0*k1_pES
	fRate21() = 1.0*k1_ppES
end functions
begin reaction rules
	reaction_1_reactants_0: 0  -> ERK(ERK_ppMEKc~0,c~C,dusp,n~0,p~0,p2~0,styxn)@cytosol -1*(fRate0()) #Modifiers(ppMEKc_tot, pERK_ppMEKc, ERKc, ppMEKc_tot, ERK_ppMEKc, pERK_ppMEKc)
	reaction_1_products_0: 0  -> ERK(ERK_ppMEKc~ERK_ppMEKc,c~C,dusp,n~0,p~P,p2~0,styxn)@cytosol fRate0() #Modifiers(ppMEKc_tot, pERK_ppMEKc, ERKc, ppMEKc_tot, ERK_ppMEKc, pERK_ppMEKc)
	reaction_2: ERK(ERK_ppMEKc~ERK_ppMEKc,c~C,dusp,n~0,p~P,p2~0,styxn)@cytosol -> ERK(ERK_ppMEKc~0,c~C,dusp,n~0,p~P,p2~0,styxn)@cytosol k3_ERKc #Modifiers(ERK_ppMEKc)
	reaction_3_reactants_0: 0  -> ERK(ERK_ppMEKc~0,c~C,dusp,n~0,p~P,p2~0,styxn)@cytosol -1*(fRate2()) #Modifiers(ppMEKc_tot, ERK_ppMEKc, pERKc, ppMEKc_tot, pERK_ppMEKc, ERK_ppMEKc)
	reaction_3_products_0: 0  -> ERK(ERK_ppMEKc~ERK_ppMEKc,c~C,dusp,n~0,p~P,p2~P,styxn)@cytosol fRate2() #Modifiers(ppMEKc_tot, ERK_ppMEKc, pERKc, ppMEKc_tot, pERK_ppMEKc, ERK_ppMEKc)
	reaction_4: ERK(ERK_ppMEKc~ERK_ppMEKc,c~C,dusp,n~0,p~P,p2~P,styxn)@cytosol -> ERK(ERK_ppMEKc~0,c~C,dusp,n~0,p~P,p2~P,styxn)@cytosol k3_ERKc #Modifiers(pERK_ppMEKc)
	reaction_5: ERK(ERK_ppMEKc~0,c~C,dusp,n~0,p~0,p2~0,styxn)@cytosol <-> ERK(ERK_ppMEKc~0,c~0,dusp,n~N,p~0,p2~0,styxn)@nucleus fRate4(),fRate4m() #Modifiers(ERKc, ERKn)
	reaction_6: ERK(ERK_ppMEKc~0,c~C,dusp,n~0,p~P,p2~0,styxn)@cytosol <-> ERK(ERK_ppMEKc~0,c~0,dusp,n~N,p~P,p2~0,styxn)@nucleus fRate5(),fRate5m() #Modifiers(pERKc, pERKn)
	reaction_7: ERK(ERK_ppMEKc~0,c~C,dusp,n~0,p~P,p2~P,styxn)@cytosol <-> ERK(ERK_ppMEKc~0,c~0,dusp,n~N,p~P,p2~P,styxn)@nucleus fRate6(),fRate6m() #Modifiers(ppERKc, ppERKn)
	reaction_8: ERK(ERK_ppMEKc~0,c~C,dusp,n~0,p~P,p2~P,styxn)@cytosol + DUSP(c~C,erk,n~0)@cytosol <-> ERK(ERK_ppMEKc~0,c~0,dusp!102,n~0,p~P,p2~P,styxn)@cytosol.DUSP(c~C,erk!102,n~0)@cytosol fRate7(),kd2_ppERKc #Modifiers(ppERKc, DUSPc, ppERK_DUSPc)
	reaction_9: ERK(ERK_ppMEKc~0,c~0,dusp!102,n~0,p~P,p2~P,styxn)@cytosol.DUSP(c~C,erk!102,n~0)@cytosol -> ERK(ERK_ppMEKc~0,c~C,dusp,n~0,p~P,p2~0,styxn)@cytosol + DUSP(c~C,erk,n~0)@cytosol kd3_ppERKc #Modifiers(ppERK_DUSPc)
	reaction_10: ERK(ERK_ppMEKc~0,c~C,dusp,n~0,p~P,p2~0,styxn)@cytosol + DUSP(c~C,erk,n~0)@cytosol <-> ERK(ERK_ppMEKc~0,c~0,dusp!102,n~0,p~P,p2~0,styxn)@cytosol.DUSP(c~C,erk!102,n~0)@cytosol fRate9(),kd2_pERKc #Modifiers(pERKc, DUSPc, pERK_DUSPc)
	reaction_11: ERK(ERK_ppMEKc~0,c~0,dusp!102,n~0,p~P,p2~0,styxn)@cytosol.DUSP(c~C,erk!102,n~0)@cytosol -> ERK(ERK_ppMEKc~0,c~C,dusp,n~0,p~0,p2~0,styxn)@cytosol + DUSP(c~C,erk,n~0)@cytosol kd3_pERKc #Modifiers(pERK_DUSPc)
	reaction_12: ERK(ERK_ppMEKc~0,c~0,dusp,n~N,p~P,p2~P,styxn)@nucleus + DUSP(c~0,erk,n~N)@nucleus <-> ERK(ERK_ppMEKc~0,c~0,dusp!102,n~0,p~P,p2~P,styxn)@nucleus.DUSP(c~0,erk!102,n~N)@nucleus fRate11(),kd2_ppERKn #Modifiers(ppERKn, DUSPn, ppERK_DUSPn)
	reaction_13: ERK(ERK_ppMEKc~0,c~0,dusp!102,n~0,p~P,p2~P,styxn)@nucleus.DUSP(c~0,erk!102,n~N)@nucleus -> ERK(ERK_ppMEKc~0,c~0,dusp,n~N,p~P,p2~0,styxn)@nucleus + DUSP(c~0,erk,n~N)@nucleus kd3_ppERKn #Modifiers(ppERK_DUSPn)
	reaction_14: ERK(ERK_ppMEKc~0,c~0,dusp,n~N,p~P,p2~0,styxn)@nucleus + DUSP(c~0,erk,n~N)@nucleus <-> ERK(ERK_ppMEKc~0,c~0,dusp!102,n~0,p~P,p2~0,styxn)@nucleus.DUSP(c~0,erk!102,n~N)@nucleus fRate13(),kd2_pERKn #Modifiers(pERKn, DUSPn, pERK_DUSPn)
	reaction_15: ERK(ERK_ppMEKc~0,c~0,dusp!102,n~0,p~P,p2~0,styxn)@nucleus.DUSP(c~0,erk!102,n~N)@nucleus -> ERK(ERK_ppMEKc~0,c~0,dusp,n~N,p~0,p2~0,styxn)@nucleus + DUSP(c~0,erk,n~N)@nucleus kd3_pERKn #Modifiers(pERK_DUSPn)
	reaction_16: 0  -> duspn()@nucleus fRate15() #Modifiers(ppERKn, ppERKn)
	reaction_17: duspn()@nucleus -> 0  fRate16() #Modifiers(duspn)
	reaction_18: 0  -> DUSP(c~0,erk,n~N)@nucleus fRate17() #Modifiers(duspn, duspn)
	reaction_19: DUSP(c~0,erk,n~N)@nucleus -> 0  fRate18() #Modifiers(DUSPn)
	reaction_20: ERK(ERK_ppMEKc~0,c~0,dusp,n~N,p~0,p2~0,styxn)@nucleus + STYXn(erk)@nucleus <-> ERK(ERK_ppMEKc~0,c~0,dusp,n~0,p~0,p2~0,styxn!101)@nucleus.STYXn(erk!101)@nucleus fRate19(),k2_ES #Modifiers(ERKn, STYXn, ERK_STYXn)
	reaction_21: ERK(ERK_ppMEKc~0,c~0,dusp,n~N,p~P,p2~0,styxn)@nucleus + STYXn(erk)@nucleus <-> ERK(ERK_ppMEKc~0,c~0,dusp,n~0,p~P,p2~0,styxn!101)@nucleus.STYXn(erk!101)@nucleus fRate20(),k2_pES #Modifiers(pERKn, STYXn, pERK_STYXn)
	reaction_22: ERK(ERK_ppMEKc~0,c~0,dusp,n~N,p~P,p2~P,styxn)@nucleus + STYXn(erk)@nucleus <-> ERK(ERK_ppMEKc~0,c~0,dusp,n~0,p~P,p2~P,styxn!101)@nucleus.STYXn(erk!101)@nucleus fRate21(),k2_ppES #Modifiers(ppERKn, STYXn, ppERK_STYXn)
end reaction rules
end model
