###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000559', 'http://identifiers.org/biomodels.db/MODEL1412010000']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/24885905']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0042053', 'http://identifiers.org/go/GO:0006914', 'http://identifiers.org/go/GO:0070841', 'http://identifiers.org/go/GO:0030163']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_HAS_PROPERTY:['http://identifiers.org/doid/DOID:14330']
#@creatorEmail:'lloret@ebi.ac.uk'
#@creatorName:'Lloret i Villas Audald'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 90 molecules and 136 reactions. The translated model has 36 molecules and 136 rules'
###
begin model
begin parameters
	k_DisRate 4.999533748e-07
	k_2merForm 1.462941015e-09
	k_DopModWTasynLampBind 7.6715997e-09
	k_LampFreeWTasyn 0.0003044571674
	k_OligAutophagUptake 2.39034347e-08
	k_OligomerForm 3.350497192e-08
	k_ProteasomeBind 3.424693672e-09
	k_ProtOligDegr 0.000370096
	k_WTasyn1_2merBindOnLamp 6.865455081e-07
	k_WTOligBindOnLamp 4e-06
	k_M_autophagyDegr 0.1
	SOURCE_c1 1.0
	SOURCE 1.0
	r1_k1 0.029422
	r2_k1 0.079182
	r4_k1 0.000001
	r31_k1 0.006795
	r37_k1 0.009996
	r38_k1 0.009953
	r68_k1 0.100000
	r69_k1 0.100000
	r132_k1 0.000000
end parameters
begin compartments
	#volume units: volume
	c3 3 1.0 #Lysosome
	c2 3 1.0 #M/autophagy&OtherLysDegrPath
	c1 3 1.0 #Cytosol
end compartments
begin molecule types
	#^ bqbiol:isVersionOf uniprot:P37840
	WTasyn8merM_Adegr()
	#^ bqbiol:hasPart uniprot:P13473, uniprot:P37840
	WTasyn3merOnLamp()
	#^ bqbiol:hasPart chebi:CHEBI:18243, uniprot:P37840, uniprot:P13473
	DopModWTasyn4merOnLamp()
	#^ bqbiol:isVersionOf uniprot:P37840
	#^ bqbiol:is uniprot:P37840, uniprot:P37840
	WTasyn(cmadegr~CMADEGR~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)
	#^ bqbiol:hasPart uniprot:P37840, chebi:CHEBI:18243, uniprot:P13473
	DopModWTasyn6merOnLamp()
	#^ bqbiol:hasVersion chebi:CHEBI:18243, uniprot:P37840
	DopModWTasyn6merM_Adegr()
	#^ bqbiol:isVersionOf uniprot:P37840
	WTasyn2degr()
	#^ bqbiol:hasPart uniprot:P13473, uniprot:P37840
	WTasyn6merOnLamp()
	#^ bqbiol:hasPart uniprot:P37840, uniprot:P13473
	WTasyn5merOnLamp()
	#^ bqbiol:isVersionOf uniprot:P37840
	WTasyndegr()
	#^ bqbiol:hasPart uniprot:P13473, uniprot:P37840
	WTasyn2merCMADegr()
	#^ bqbiol:hasPart uniprot:P13473, uniprot:P37840
	WTasyn7merOnLamp()
	#^ bqbiol:isVersionOf uniprot:P37840
	WTasyn6merM_Adegr()
	#^ bqbiol:hasPart uniprot:P37840, uniprot:P13473
	WTasyn8merOnLamp()
	#^ bqbiol:is chebi:CHEBI:18243
	Dopamine(_degraded~_DEGRADED~0,wtasyn)
	#^ bqbiol:hasVersion chebi:CHEBI:18243, uniprot:P37840
	DopModWTasyn3merM_Adegr()
	#^ bqbiol:hasVersion chebi:CHEBI:18243, uniprot:P37840
	DopModWTasyn4merM_Adegr()
	#^ bqbiol:hasPart uniprot:P13473, chebi:CHEBI:18243, uniprot:P37840
	DopModWTasyn5merOnLamp()
	#^ bqbiol:hasPart uniprot:P13473, uniprot:P37840, chebi:CHEBI:18243
	DopModWTasyn9merOnLamp()
	#^ bqbiol:isVersionOf uniprot:P37840
	WTasyn3merM_Adegr()
	#^ bqbiol:hasPart uniprot:P37840, uniprot:P13473
	WTasyn9merOnLamp()
	#^ bqbiol:hasVersion chebi:CHEBI:18243, uniprot:P37840
	DopModWTasyn7merM_Adegr()
	#^ bqbiol:isVersionOf uniprot:P37840
	WTasyn2merM_Adegr()
	#^ bqbiol:isVersionOf go:GO:0000502
	Proteasome(wtasyn)
	#^ bqbiol:hasVersion uniprot:P37840, chebi:CHEBI:18243
	DopModWTasyn2merM_Adegr()
	#^ bqbiol:hasPart chebi:CHEBI:18243, uniprot:P13473, uniprot:P37840
	DopModWTasyn3merOnLamp()
	#^ bqbiol:hasPart uniprot:P13473, chebi:CHEBI:18243, uniprot:P37840
	DopModWTasyn7merOnLamp()
	#^ bqbiol:hasPart uniprot:P13473, uniprot:P37840, chebi:CHEBI:18243
	DopModWTasynOnLamp()
	#^ bqbiol:isVersionOf uniprot:P37840
	WTasyn5merM_Adegr()
	#^ bqbiol:hasPart uniprot:P37840, chebi:CHEBI:18243, uniprot:P13473
	DopModWTasyn8merOnLamp()
	#^ bqbiol:hasPart uniprot:P37840, uniprot:P13473
	WTasyn4merOnLamp()
	#^ bqbiol:isVersionOf uniprot:P37840
	WTasyn4merM_Adegrr()
	#^ bqbiol:hasVersion uniprot:P37840, chebi:CHEBI:18243
	DopModWTasyn8merM_Adegr()
	#^ bqbiol:is uniprot:P13473
	Lamp2a()
	#^ bqbiol:hasPart uniprot:P13473, chebi:CHEBI:18243, uniprot:P37840
	DopModWTasyn2merOnLamp()
	#^ bqbiol:isVersionOf uniprot:P37840
	WTasyn7merM_Adegr()
end molecule types
begin seed species
	@c3:Lamp2a() 200.0 #Lamp2a #s51
	@c1:WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn,wtasyn,wtasyn).Dopamine(_degraded~0,wtasyn!104).Dopamine(_degraded~0,wtasyn!105).Dopamine(_degraded~0,wtasyn!113).Dopamine(_degraded~0,wtasyn!114).Dopamine(_degraded~0,wtasyn!123) 8.0 #DopModWTasyn5 #s1
	@c1:WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn,wtasyn).Dopamine(_degraded~0,wtasyn!104).Dopamine(_degraded~0,wtasyn!105).Dopamine(_degraded~0,wtasyn!113).Dopamine(_degraded~0,wtasyn!114) 8.0 #DopModWTasyn4 #s2
	@c1:WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn,wtasyn,wtasyn).Dopamine(_degraded~0,wtasyn!104).Dopamine(_degraded~0,wtasyn!105).Dopamine(_degraded~0,wtasyn!113) 8.0 #DopModWTasyn3 #s5
	@c1:WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn).Dopamine(_degraded~0,wtasyn!104) 953.0 #DopModWTasyn #s7
	@c1:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn) 1650.0 #WTasyn #s17
	@c1:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn) 22.0 #WTasyn2 #s18
	@c1:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn,wtasyn,wtasyn) 8.0 #WTasyn3 #s20
	@c1:WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn,wtasyn,wtasyn,wtasyn).Dopamine(_degraded~0,wtasyn!104).Dopamine(_degraded~0,wtasyn!105).Dopamine(_degraded~0,wtasyn!113).Dopamine(_degraded~0,wtasyn!114).Dopamine(_degraded~0,wtasyn!123).Dopamine(_degraded~0,wtasyn!125) 8.0 #DopModWTasyn6 #s21
	@c1:Dopamine(_degraded~0,wtasyn) 750.0 #Dopamine #s22
	@c1:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn,wtasyn,wtasyn) 8.0 #WTasyn5 #s23
	@c1:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn,wtasyn) 8.0 #WTasyn4 #s24
	@c1:WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn).WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn,wtasyn,wtasyn).Dopamine(_degraded~0,wtasyn!104).Dopamine(_degraded~0,wtasyn!105).Dopamine(_degraded~0,wtasyn!113).Dopamine(_degraded~0,wtasyn!114).Dopamine(_degraded~0,wtasyn!123).Dopamine(_degraded~0,wtasyn!125).Dopamine(_degraded~0,wtasyn!126) 8.0 #DopModWTasyn7 #s25
	@c1:WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn).WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!127,proteasome,wtasyn!120,wtasyn!121,wtasyn,wtasyn,wtasyn).Dopamine(_degraded~0,wtasyn!104).Dopamine(_degraded~0,wtasyn!105).Dopamine(_degraded~0,wtasyn!113).Dopamine(_degraded~0,wtasyn!114).Dopamine(_degraded~0,wtasyn!123).Dopamine(_degraded~0,wtasyn!125).Dopamine(_degraded~0,wtasyn!126).Dopamine(_degraded~0,wtasyn!127) 8.0 #DopModWTasyn8 #s26
	@c1:WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn).WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!127,proteasome,wtasyn!120,wtasyn!121,wtasyn!122,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!128,proteasome,wtasyn!122,wtasyn,wtasyn,wtasyn,wtasyn).Dopamine(_degraded~0,wtasyn!104).Dopamine(_degraded~0,wtasyn!105).Dopamine(_degraded~0,wtasyn!113).Dopamine(_degraded~0,wtasyn!114).Dopamine(_degraded~0,wtasyn!123).Dopamine(_degraded~0,wtasyn!125).Dopamine(_degraded~0,wtasyn!126).Dopamine(_degraded~0,wtasyn!127).Dopamine(_degraded~0,wtasyn!128) 8.0 #DopModWTasyn9 #s27
	@c1:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn!122,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!122,wtasyn,wtasyn,wtasyn,wtasyn) 8.0 #WTasyn9 #s29
	@c1:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn,wtasyn,wtasyn) 8.0 #WTasyn8 #s30
	@c1:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn,wtasyn,wtasyn) 8.0 #WTasyn7 #s31
	@c1:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn,wtasyn,wtasyn,wtasyn) 8.0 #WTasyn6 #s32
	@c1:Proteasome(wtasyn) 1500.0 #Proteasome #s35
end seed species
begin observables
	Species Lamp2a_c3 @c3:Lamp2a() #Lamp2a
	Species WTasyn_c3 @c3:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn) #WTasyn
	Species WTasyn2_c3 @c3:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn) #WTasyn2
	Species WTasyndegr_c3 @c3:WTasyndegr() #WTasyndegr
	Species WTasyn2degr_c3 @c3:WTasyn2degr() #WTasyn2degr
	Species WTasyn2merCMADegr_c3 @c3:WTasyn2merCMADegr() #WTasyn2merCMADegr
	Species WTasynCMADegr_c3 @c3:WTasyn(cmadegr~CMADEGR,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn) #WTasynCMADegr
	Species DopModWTasyn2merOnLamp_c3 @c3:DopModWTasyn2merOnLamp() #DopModWTasyn2merOnLamp
	Species DopModWTasyn3merOnLamp_c3 @c3:DopModWTasyn3merOnLamp() #DopModWTasyn3merOnLamp
	Species DopModWTasyn4merOnLamp_c3 @c3:DopModWTasyn4merOnLamp() #DopModWTasyn4merOnLamp
	Species DopModWTasyn7merOnLamp_c3 @c3:DopModWTasyn7merOnLamp() #DopModWTasyn7merOnLamp
	Species DopModWTasyn6merOnLamp_c3 @c3:DopModWTasyn6merOnLamp() #DopModWTasyn6merOnLamp
	Species DopModWTasyn5merOnLamp_c3 @c3:DopModWTasyn5merOnLamp() #DopModWTasyn5merOnLamp
	Species DopModWTasyn8merOnLamp_c3 @c3:DopModWTasyn8merOnLamp() #DopModWTasyn8merOnLamp
	Species DopModWTasyn9merOnLamp_c3 @c3:DopModWTasyn9merOnLamp() #DopModWTasyn9merOnLamp
	Species WTasyn3merOnLamp_c3 @c3:WTasyn3merOnLamp() #WTasyn3merOnLamp
	Species WTasyn4merOnLamp_c3 @c3:WTasyn4merOnLamp() #WTasyn4merOnLamp
	Species WTasyn5merOnLamp_c3 @c3:WTasyn5merOnLamp() #WTasyn5merOnLamp
	Species WTasyn6merOnLamp_c3 @c3:WTasyn6merOnLamp() #WTasyn6merOnLamp
	Species WTasyn7merOnLamp_c3 @c3:WTasyn7merOnLamp() #WTasyn7merOnLamp
	Species WTasyn8merOnLamp_c3 @c3:WTasyn8merOnLamp() #WTasyn8merOnLamp
	Species WTasyn9merOnLamp_c3 @c3:WTasyn9merOnLamp() #WTasyn9merOnLamp
	Species DopModWTasynOnLamp_c3 @c3:DopModWTasynOnLamp() #DopModWTasynOnLamp
	Species WTasyn2merM_Adegr_c2 @c2:WTasyn2merM_Adegr() #WTasyn2merM/Adegr
	Species WTasyn3merM_Adegr_c2 @c2:WTasyn3merM_Adegr() #WTasyn3merM/Adegr
	Species WTasyn4merM_Adegrr_c2 @c2:WTasyn4merM_Adegrr() #WTasyn4merM/Adegrr
	Species WTasyn5merM_Adegr_c2 @c2:WTasyn5merM_Adegr() #WTasyn5merM/Adegr
	Species WTasyn6merM_Adegr_c2 @c2:WTasyn6merM_Adegr() #WTasyn6merM/Adegr
	Species WTasyn7merM_Adegr_c2 @c2:WTasyn7merM_Adegr() #WTasyn7merM/Adegr
	Species WTasyn8merM_Adegr_c2 @c2:WTasyn8merM_Adegr() #WTasyn8merM/Adegr
	Species DopModWTasyn2merM_Adegr_c2 @c2:DopModWTasyn2merM_Adegr() #DopModWTasyn2merM/Adegr
	Species DopModWTasyn3merM_Adegr_c2 @c2:DopModWTasyn3merM_Adegr() #DopModWTasyn3merM/Adegr
	Species DopModWTasyn4merM_Adegr_c2 @c2:DopModWTasyn4merM_Adegr() #DopModWTasyn4merM/Adegr
	Species DopModWTasyn6merM_Adegr_c2 @c2:DopModWTasyn6merM_Adegr() #DopModWTasyn6merM/Adegr
	Species DopModWTasyn8merM_Adegr_c2 @c2:DopModWTasyn8merM_Adegr() #DopModWTasyn8merM/Adegr
	Species WTasyn4_c2 @c2:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn,wtasyn) #WTasyn4
	Species WTasyn5_c2 @c2:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn,wtasyn,wtasyn) #WTasyn5
	Species WTasyn6_c2 @c2:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn,wtasyn,wtasyn,wtasyn) #WTasyn6
	Species WTasyn3_c2 @c2:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn,wtasyn,wtasyn) #WTasyn3
	Species WTasyn2_c2 @c2:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn) #WTasyn2
	Species WTasyn7_c2 @c2:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn,wtasyn,wtasyn) #WTasyn7
	Species WTasyn8_c2 @c2:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn,wtasyn,wtasyn) #WTasyn8
	Species DopModWTasyn7merM_Adegr_c2 @c2:DopModWTasyn7merM_Adegr() #DopModWTasyn7merM/Adegr
	Species DopModWTasyn8_c2 @c2:WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn).WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!127,proteasome,wtasyn!120,wtasyn!121,wtasyn,wtasyn,wtasyn).Dopamine(_degraded~0,wtasyn!104).Dopamine(_degraded~0,wtasyn!105).Dopamine(_degraded~0,wtasyn!113).Dopamine(_degraded~0,wtasyn!114).Dopamine(_degraded~0,wtasyn!123).Dopamine(_degraded~0,wtasyn!125).Dopamine(_degraded~0,wtasyn!126).Dopamine(_degraded~0,wtasyn!127) #DopModWTasyn8
	Species DopModWTasyn7_c2 @c2:WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn).WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn,wtasyn,wtasyn).Dopamine(_degraded~0,wtasyn!104).Dopamine(_degraded~0,wtasyn!105).Dopamine(_degraded~0,wtasyn!113).Dopamine(_degraded~0,wtasyn!114).Dopamine(_degraded~0,wtasyn!123).Dopamine(_degraded~0,wtasyn!125).Dopamine(_degraded~0,wtasyn!126) #DopModWTasyn7
	Species DopModWTasyn6_c2 @c2:WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn,wtasyn,wtasyn,wtasyn).Dopamine(_degraded~0,wtasyn!104).Dopamine(_degraded~0,wtasyn!105).Dopamine(_degraded~0,wtasyn!113).Dopamine(_degraded~0,wtasyn!114).Dopamine(_degraded~0,wtasyn!123).Dopamine(_degraded~0,wtasyn!125) #DopModWTasyn6
	Species DopModWTasyn5_c2 @c2:WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn,wtasyn,wtasyn).Dopamine(_degraded~0,wtasyn!104).Dopamine(_degraded~0,wtasyn!105).Dopamine(_degraded~0,wtasyn!113).Dopamine(_degraded~0,wtasyn!114).Dopamine(_degraded~0,wtasyn!123) #DopModWTasyn5
	Species DopModWTasyn4_c2 @c2:WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn,wtasyn).Dopamine(_degraded~0,wtasyn!104).Dopamine(_degraded~0,wtasyn!105).Dopamine(_degraded~0,wtasyn!113).Dopamine(_degraded~0,wtasyn!114) #DopModWTasyn4
	Species DopModWTasyn3_c2 @c2:WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn,wtasyn,wtasyn).Dopamine(_degraded~0,wtasyn!104).Dopamine(_degraded~0,wtasyn!105).Dopamine(_degraded~0,wtasyn!113) #DopModWTasyn3
	Species WTasyn_c2 @c2:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn) #WTasyn
	Species DopModWTasyn_c2 @c2:WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn).Dopamine(_degraded~0,wtasyn!104) #DopModWTasyn
	Species DopModWTasyn2_c2 @c2:WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn).Dopamine(_degraded~0,wtasyn!104).Dopamine(_degraded~0,wtasyn!105) #DopModWTasyn2
	Species DopModWTasyn5_c1 @c1:WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn,wtasyn,wtasyn).Dopamine(_degraded~0,wtasyn!104).Dopamine(_degraded~0,wtasyn!105).Dopamine(_degraded~0,wtasyn!113).Dopamine(_degraded~0,wtasyn!114).Dopamine(_degraded~0,wtasyn!123) #DopModWTasyn5
	Species DopModWTasyn4_c1 @c1:WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn,wtasyn).Dopamine(_degraded~0,wtasyn!104).Dopamine(_degraded~0,wtasyn!105).Dopamine(_degraded~0,wtasyn!113).Dopamine(_degraded~0,wtasyn!114) #DopModWTasyn4
	Species DopModWTasyn3_c1 @c1:WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn,wtasyn,wtasyn).Dopamine(_degraded~0,wtasyn!104).Dopamine(_degraded~0,wtasyn!105).Dopamine(_degraded~0,wtasyn!113) #DopModWTasyn3
	Species DopModWTasyn2_c1 @c1:WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn).Dopamine(_degraded~0,wtasyn!104).Dopamine(_degraded~0,wtasyn!105) #DopModWTasyn2
	Species DopModWTasyn_c1 @c1:WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn).Dopamine(_degraded~0,wtasyn!104) #DopModWTasyn
	Species WTasyn_c1 @c1:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn) #WTasyn
	Species WTasyn2_c1 @c1:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn) #WTasyn2
	Species WTasyn3_c1 @c1:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn,wtasyn,wtasyn) #WTasyn3
	Species DopModWTasyn6_c1 @c1:WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn,wtasyn,wtasyn,wtasyn).Dopamine(_degraded~0,wtasyn!104).Dopamine(_degraded~0,wtasyn!105).Dopamine(_degraded~0,wtasyn!113).Dopamine(_degraded~0,wtasyn!114).Dopamine(_degraded~0,wtasyn!123).Dopamine(_degraded~0,wtasyn!125) #DopModWTasyn6
	Species Dopamine_c1 @c1:Dopamine(_degraded~0,wtasyn) #Dopamine
	Species WTasyn5_c1 @c1:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn,wtasyn,wtasyn) #WTasyn5
	Species WTasyn4_c1 @c1:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn,wtasyn) #WTasyn4
	Species DopModWTasyn7_c1 @c1:WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn).WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn,wtasyn,wtasyn).Dopamine(_degraded~0,wtasyn!104).Dopamine(_degraded~0,wtasyn!105).Dopamine(_degraded~0,wtasyn!113).Dopamine(_degraded~0,wtasyn!114).Dopamine(_degraded~0,wtasyn!123).Dopamine(_degraded~0,wtasyn!125).Dopamine(_degraded~0,wtasyn!126) #DopModWTasyn7
	Species DopModWTasyn8_c1 @c1:WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn).WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!127,proteasome,wtasyn!120,wtasyn!121,wtasyn,wtasyn,wtasyn).Dopamine(_degraded~0,wtasyn!104).Dopamine(_degraded~0,wtasyn!105).Dopamine(_degraded~0,wtasyn!113).Dopamine(_degraded~0,wtasyn!114).Dopamine(_degraded~0,wtasyn!123).Dopamine(_degraded~0,wtasyn!125).Dopamine(_degraded~0,wtasyn!126).Dopamine(_degraded~0,wtasyn!127) #DopModWTasyn8
	Species DopModWTasyn9_c1 @c1:WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn).WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!127,proteasome,wtasyn!120,wtasyn!121,wtasyn!122,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!128,proteasome,wtasyn!122,wtasyn,wtasyn,wtasyn,wtasyn).Dopamine(_degraded~0,wtasyn!104).Dopamine(_degraded~0,wtasyn!105).Dopamine(_degraded~0,wtasyn!113).Dopamine(_degraded~0,wtasyn!114).Dopamine(_degraded~0,wtasyn!123).Dopamine(_degraded~0,wtasyn!125).Dopamine(_degraded~0,wtasyn!126).Dopamine(_degraded~0,wtasyn!127).Dopamine(_degraded~0,wtasyn!128) #DopModWTasyn9
	Species WTasyn9_c1 @c1:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn!122,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!122,wtasyn,wtasyn,wtasyn,wtasyn) #WTasyn9
	Species WTasyn8_c1 @c1:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn,wtasyn,wtasyn) #WTasyn8
	Species WTasyn7_c1 @c1:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn,wtasyn,wtasyn) #WTasyn7
	Species WTasyn6_c1 @c1:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn,wtasyn,wtasyn,wtasyn) #WTasyn6
	Species HigherWTasynSPC_c1 @c1:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn!122,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!122,wtasyn!124,wtasyn,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!124,wtasyn,wtasyn,wtasyn,wtasyn) #HigherWTasynSPC
	Species Proteasome_c1 @c1:Proteasome(wtasyn) #Proteasome
	Species Dopamine_degraded_c1 @c1:Dopamine(_degraded~_DEGRADED,wtasyn) #Dopamine_degraded
	Species ProtWTasyn3_c1 @c1:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome!111,wtasyn!103,wtasyn!106,wtasyn,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn,wtasyn,wtasyn).Proteasome(wtasyn!111) #ProtWTasyn3
	Species ProtWTasyn4_c1 @c1:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn,wtasyn).Proteasome(wtasyn!111) #ProtWTasyn4
	Species ProtWTasyn5_c1 @c1:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn,wtasyn,wtasyn).Proteasome(wtasyn!111) #ProtWTasyn5
	Species ProtWTasyn6_c1 @c1:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn,wtasyn,wtasyn,wtasyn).Proteasome(wtasyn!111) #ProtWTasyn6
	Species ProtWTasyn7_c1 @c1:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn,wtasyn,wtasyn).Proteasome(wtasyn!111) #ProtWTasyn7
	Species ProtWTasyn8_c1 @c1:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn,wtasyn,wtasyn).Proteasome(wtasyn!111) #ProtWTasyn8
	Species ProtWTasyn9_c1 @c1:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn!122,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!122,wtasyn,wtasyn,wtasyn,wtasyn).Proteasome(wtasyn!111) #ProtWTasyn9
	Species ProtDopModWTasyn3_c1 @c1:WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!104,proteasome!111,wtasyn!103,wtasyn!106,wtasyn,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn,wtasyn,wtasyn).Dopamine(_degraded~0,wtasyn!104).Dopamine(_degraded~0,wtasyn!105).Dopamine(_degraded~0,wtasyn!113).Proteasome(wtasyn!111) #ProtDopModWTasyn3
	Species ProtDopModWTasyn4_c1 @c1:WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!104,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn,wtasyn).Dopamine(_degraded~0,wtasyn!104).Dopamine(_degraded~0,wtasyn!105).Dopamine(_degraded~0,wtasyn!113).Dopamine(_degraded~0,wtasyn!114).Proteasome(wtasyn!111) #ProtDopModWTasyn4
	Species ProtDopModWTasyn5_c1 @c1:WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!104,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn,wtasyn,wtasyn).Dopamine(_degraded~0,wtasyn!104).Dopamine(_degraded~0,wtasyn!105).Dopamine(_degraded~0,wtasyn!113).Dopamine(_degraded~0,wtasyn!114).Dopamine(_degraded~0,wtasyn!123).Proteasome(wtasyn!111) #ProtDopModWTasyn5
	Species ProtDopModWTasyn6_c1 @c1:WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!104,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn,wtasyn,wtasyn,wtasyn).Dopamine(_degraded~0,wtasyn!104).Dopamine(_degraded~0,wtasyn!105).Dopamine(_degraded~0,wtasyn!113).Dopamine(_degraded~0,wtasyn!114).Dopamine(_degraded~0,wtasyn!123).Dopamine(_degraded~0,wtasyn!125).Proteasome(wtasyn!111) #ProtDopModWTasyn6
	Species ProtDopModWTasyn7_c1 @c1:WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!104,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn).WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn,wtasyn,wtasyn).Dopamine(_degraded~0,wtasyn!104).Dopamine(_degraded~0,wtasyn!105).Dopamine(_degraded~0,wtasyn!113).Dopamine(_degraded~0,wtasyn!114).Dopamine(_degraded~0,wtasyn!123).Dopamine(_degraded~0,wtasyn!125).Dopamine(_degraded~0,wtasyn!126).Proteasome(wtasyn!111) #ProtDopModWTasyn7
	Species ProtDopModWTasyn8_c1 @c1:WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!104,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn).WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!127,proteasome,wtasyn!120,wtasyn!121,wtasyn,wtasyn,wtasyn).Dopamine(_degraded~0,wtasyn!104).Dopamine(_degraded~0,wtasyn!105).Dopamine(_degraded~0,wtasyn!113).Dopamine(_degraded~0,wtasyn!114).Dopamine(_degraded~0,wtasyn!123).Dopamine(_degraded~0,wtasyn!125).Dopamine(_degraded~0,wtasyn!126).Dopamine(_degraded~0,wtasyn!127).Proteasome(wtasyn!111) #ProtDopModWTasyn8
	Species ProtDopModWTasyn9_c1 @c1:WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!104,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn).WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!127,proteasome,wtasyn!120,wtasyn!121,wtasyn!122,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine!128,proteasome,wtasyn!122,wtasyn,wtasyn,wtasyn,wtasyn).Dopamine(_degraded~0,wtasyn!104).Dopamine(_degraded~0,wtasyn!105).Dopamine(_degraded~0,wtasyn!113).Dopamine(_degraded~0,wtasyn!114).Dopamine(_degraded~0,wtasyn!123).Dopamine(_degraded~0,wtasyn!125).Dopamine(_degraded~0,wtasyn!126).Dopamine(_degraded~0,wtasyn!127).Dopamine(_degraded~0,wtasyn!128).Proteasome(wtasyn!111) #ProtDopModWTasyn9
	Species ProtWTasynHigherSPC_c1 @c1:WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn!122,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!122,wtasyn!124,wtasyn,wtasyn,wtasyn).WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!124,wtasyn,wtasyn,wtasyn,wtasyn).Proteasome(wtasyn!111) #ProtWTasynHigherSPC
end observables
begin functions
	Total_Cytosolic_WTASYN_Oligomers() = 1.0*DopModWTasyn3_c1 + 1.0*DopModWTasyn4_c1 + 1.0*DopModWTasyn5_c1 + 1.0*DopModWTasyn6_c1 + 1.0*DopModWTasyn7_c1 + 1.0*DopModWTasyn8_c1 + 1.0*DopModWTasyn9_c1 + 1.0*WTasyn3_c1 + 1.0*WTasyn4_c1 + 1.0*WTasyn5_c1 + 1.0*WTasyn6_c1 + 1.0*WTasyn7_c1 + 1.0*WTasyn8_c1 + 1.0*WTasyn9_c1
	Total_Cytosolic_WTASYN_Monomer() = 1.0*DopModWTasyn_c1 + 1.0*WTasyn_c1
	Total_Cytosolic_WTASYN_Dimer() = 1.0*DopModWTasyn2_c1 + 1.0*WTasyn2_c1
end functions
begin reaction rules
	re1: 0  -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1 r1_k1 #Modifiers(s3)
	re2: 0  -> Dopamine(_degraded~0,wtasyn)@c1 r2_k1 #Modifiers(s3)
	re3: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1 + WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c1 k_2merForm #Modifiers(s17)
	re4: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1 + Dopamine(_degraded~0,wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1 r4_k1 #Modifiers(s17, s22)
	re5: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1 + Lamp2a()@c3 -> WTasyndegr()@c3 k_WTasyn1_2merBindOnLamp #Modifiers(s17, s51)
	re6: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c2 k_OligAutophagUptake #Modifiers(s18)
	re7: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c1 + WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1 k_OligomerForm #Modifiers(s18, s17)
	re8: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c1 + Lamp2a()@c3 -> WTasyn2degr()@c3 k_WTasyn1_2merBindOnLamp #Modifiers(s18, s51)
	re9: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn,wtasyn,wtasyn)@c2 k_OligAutophagUptake #Modifiers(s20)
	re10: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1 + WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn,wtasyn)@c1 k_OligomerForm #Modifiers(s20, s17)
	re11: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1 + Proteasome(wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome!111,wtasyn!103,wtasyn!106,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1.Proteasome(wtasyn!111)@c1 k_ProteasomeBind #Modifiers(s20, s35)
	re12: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn,wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn,wtasyn)@c2 k_OligAutophagUptake #Modifiers(s24)
	re13: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn,wtasyn)@c1 + WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn,wtasyn,wtasyn)@c1 k_OligomerForm #Modifiers(s24, s17)
	re14: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn,wtasyn)@c1 + Proteasome(wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn,wtasyn)@c1.Proteasome(wtasyn!111)@c1 k_ProteasomeBind #Modifiers(s24, s35)
	re15: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn,wtasyn,wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn,wtasyn,wtasyn)@c2 k_OligAutophagUptake #Modifiers(s23)
	re16: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn,wtasyn,wtasyn)@c1 + WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn,wtasyn,wtasyn,wtasyn)@c1 k_OligomerForm #Modifiers(s23, s17)
	re17: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn,wtasyn,wtasyn)@c1 + Proteasome(wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn,wtasyn,wtasyn)@c1.Proteasome(wtasyn!111)@c1 k_ProteasomeBind #Modifiers(s23, s35)
	re18: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn,wtasyn,wtasyn)@c1 + Lamp2a()@c3 -> WTasyn5merOnLamp()@c3 k_WTOligBindOnLamp #Modifiers(s23, s51)
	re19: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn,wtasyn,wtasyn,wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn,wtasyn,wtasyn,wtasyn)@c2 k_OligAutophagUptake #Modifiers(s32)
	re20: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn,wtasyn,wtasyn,wtasyn)@c1 + WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1 k_OligomerForm #Modifiers(s32, s17)
	re21: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn,wtasyn,wtasyn,wtasyn)@c1 + Proteasome(wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Proteasome(wtasyn!111)@c1 k_ProteasomeBind #Modifiers(s32, s35)
	re22: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn,wtasyn,wtasyn)@c2 k_OligAutophagUptake #Modifiers(s31)
	re23: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1 + WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn,wtasyn,wtasyn)@c1 k_OligomerForm #Modifiers(s31, s17)
	re24: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1 + Proteasome(wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1.Proteasome(wtasyn!111)@c1 k_ProteasomeBind #Modifiers(s31, s35)
	re25: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1 + Lamp2a()@c3 -> WTasyn7merOnLamp()@c3 k_WTOligBindOnLamp #Modifiers(s31, s51)
	re26: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn,wtasyn,wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn,wtasyn,wtasyn)@c2 k_OligAutophagUptake #Modifiers(s30)
	re27: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn,wtasyn,wtasyn)@c1 + WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn!122,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!122,wtasyn,wtasyn,wtasyn,wtasyn)@c1 k_OligomerForm #Modifiers(s30, s17)
	re28: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn,wtasyn,wtasyn)@c1 + Proteasome(wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn,wtasyn,wtasyn)@c1.Proteasome(wtasyn!111)@c1 k_ProteasomeBind #Modifiers(s30, s35)
	re29: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn!122,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!122,wtasyn,wtasyn,wtasyn,wtasyn)@c1 + Proteasome(wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn!122,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!122,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Proteasome(wtasyn!111)@c1 k_ProteasomeBind #Modifiers(s29, s35)
	re30: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn!122,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!122,wtasyn,wtasyn,wtasyn,wtasyn)@c1 + Lamp2a()@c3 -> WTasyn9merOnLamp()@c3 k_WTOligBindOnLamp #Modifiers(s29, s51)
	re31: Dopamine(_degraded~0,wtasyn)@c1 -> Dopamine(_degraded~_DEGRADED,wtasyn)@c1 r31_k1 #Modifiers(s22)
	re32: WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1 + WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1 -> WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1 k_2merForm #Modifiers(s7)
	re33: WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1 + DopModWTasynOnLamp()@c3 -> DopModWTasyn2merOnLamp()@c3 k_2merForm #Modifiers(s7, s536)
	re34: WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1 + DopModWTasyn6merOnLamp()@c3 -> DopModWTasyn7merOnLamp()@c3 k_OligomerForm #Modifiers(s7, s490)
	re35: WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1 + DopModWTasyn7merOnLamp()@c3 -> DopModWTasyn8merOnLamp()@c3 k_OligomerForm #Modifiers(s7, s489)
	re36: WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1 + DopModWTasyn8merOnLamp()@c3 -> DopModWTasyn9merOnLamp()@c3 k_OligomerForm #Modifiers(s7, s492)
	re37: WTasyndegr()@c3 -> Lamp2a()@c3 + WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c3 r37_k1 #Modifiers(s78)
	re38: WTasyn2degr()@c3 -> Lamp2a()@c3 + WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c3.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c3 r38_k1 #Modifiers(s85)
	re40: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn,wtasyn)@c2 -> WTasyn4merM_Adegrr()@c2 k_M_autophagyDegr #Modifiers(s517)
	re41: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn,wtasyn,wtasyn)@c2 -> WTasyn8merM_Adegr()@c2 k_M_autophagyDegr #Modifiers(s523)
	re42: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn,wtasyn,wtasyn)@c2 -> WTasyn3merM_Adegr()@c2 k_M_autophagyDegr #Modifiers(s520)
	re43: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c2 -> WTasyn2merM_Adegr()@c2 k_M_autophagyDegr #Modifiers(s521)
	re44: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn,wtasyn,wtasyn)@c2 -> WTasyn7merM_Adegr()@c2 k_M_autophagyDegr #Modifiers(s522)
	re45: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn,wtasyn,wtasyn)@c2 -> WTasyn5merM_Adegr()@c2 k_M_autophagyDegr #Modifiers(s518)
	re46: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn,wtasyn,wtasyn,wtasyn)@c2 -> WTasyn6merM_Adegr()@c2 k_M_autophagyDegr #Modifiers(s519)
	re47: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn!122,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!122,wtasyn,wtasyn,wtasyn,wtasyn)@c1 + WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn!122,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!122,wtasyn!124,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!124,wtasyn,wtasyn,wtasyn,wtasyn)@c1 k_OligomerForm #Modifiers(s29, s17)
	re48: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1 -> WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c2.Dopamine(_degraded~0,wtasyn!104)@c2.Dopamine(_degraded~0,wtasyn!105)@c2 k_OligAutophagUptake #Modifiers(s6)
	re49: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1 + WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1 -> WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1 k_OligomerForm #Modifiers(s6, s7)
	re50: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1 -> WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn,wtasyn,wtasyn)@c2.Dopamine(_degraded~0,wtasyn!104)@c2.Dopamine(_degraded~0,wtasyn!105)@c2.Dopamine(_degraded~0,wtasyn!113)@c2 k_OligAutophagUptake #Modifiers(s5)
	re51: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1 + WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1 -> WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1 k_OligomerForm #Modifiers(s5, s7)
	re52: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1 + Proteasome(wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome!111,wtasyn!103,wtasyn!106,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Proteasome(wtasyn!111)@c1 k_ProteasomeBind #Modifiers(s5, s35)
	re53: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1 -> WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn,wtasyn)@c2.Dopamine(_degraded~0,wtasyn!104)@c2.Dopamine(_degraded~0,wtasyn!105)@c2.Dopamine(_degraded~0,wtasyn!113)@c2.Dopamine(_degraded~0,wtasyn!114)@c2 k_OligAutophagUptake #Modifiers(s2)
	re54: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1 + WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1 -> WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1 k_OligomerForm #Modifiers(s2, s7)
	re55: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1 + Proteasome(wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Proteasome(wtasyn!111)@c1 k_ProteasomeBind #Modifiers(s2, s35)
	re56: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1 -> WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn,wtasyn,wtasyn)@c2.Dopamine(_degraded~0,wtasyn!104)@c2.Dopamine(_degraded~0,wtasyn!105)@c2.Dopamine(_degraded~0,wtasyn!113)@c2.Dopamine(_degraded~0,wtasyn!114)@c2.Dopamine(_degraded~0,wtasyn!123)@c2 k_OligAutophagUptake #Modifiers(s1)
	re57: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1 + WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1 -> WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1.Dopamine(_degraded~0,wtasyn!125)@c1 k_OligomerForm #Modifiers(s1, s7)
	re58: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1 + Proteasome(wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1.Proteasome(wtasyn!111)@c1 k_ProteasomeBind #Modifiers(s1, s35)
	re59: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1.Dopamine(_degraded~0,wtasyn!125)@c1 -> WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn,wtasyn,wtasyn,wtasyn)@c2.Dopamine(_degraded~0,wtasyn!104)@c2.Dopamine(_degraded~0,wtasyn!105)@c2.Dopamine(_degraded~0,wtasyn!113)@c2.Dopamine(_degraded~0,wtasyn!114)@c2.Dopamine(_degraded~0,wtasyn!123)@c2.Dopamine(_degraded~0,wtasyn!125)@c2 k_OligAutophagUptake #Modifiers(s21)
	re60: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1.Dopamine(_degraded~0,wtasyn!125)@c1 + WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1 -> WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1.Dopamine(_degraded~0,wtasyn!125)@c1.Dopamine(_degraded~0,wtasyn!126)@c1 k_OligomerForm #Modifiers(s21, s7)
	re61: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1.Dopamine(_degraded~0,wtasyn!125)@c1 + Proteasome(wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1.Dopamine(_degraded~0,wtasyn!125)@c1.Proteasome(wtasyn!111)@c1 k_ProteasomeBind #Modifiers(s21, s35)
	re62: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1.Dopamine(_degraded~0,wtasyn!125)@c1.Dopamine(_degraded~0,wtasyn!126)@c1 -> WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn,wtasyn,wtasyn)@c2.Dopamine(_degraded~0,wtasyn!104)@c2.Dopamine(_degraded~0,wtasyn!105)@c2.Dopamine(_degraded~0,wtasyn!113)@c2.Dopamine(_degraded~0,wtasyn!114)@c2.Dopamine(_degraded~0,wtasyn!123)@c2.Dopamine(_degraded~0,wtasyn!125)@c2.Dopamine(_degraded~0,wtasyn!126)@c2 k_OligAutophagUptake #Modifiers(s25)
	re63: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1.Dopamine(_degraded~0,wtasyn!125)@c1.Dopamine(_degraded~0,wtasyn!126)@c1 + WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1 -> WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!127,proteasome,wtasyn!120,wtasyn!121,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1.Dopamine(_degraded~0,wtasyn!125)@c1.Dopamine(_degraded~0,wtasyn!126)@c1.Dopamine(_degraded~0,wtasyn!127)@c1 k_OligomerForm #Modifiers(s25, s7)
	re64: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1.Dopamine(_degraded~0,wtasyn!125)@c1.Dopamine(_degraded~0,wtasyn!126)@c1 + Proteasome(wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1.Dopamine(_degraded~0,wtasyn!125)@c1.Dopamine(_degraded~0,wtasyn!126)@c1.Proteasome(wtasyn!111)@c1 k_ProteasomeBind #Modifiers(s25, s35)
	re65: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!127,proteasome,wtasyn!120,wtasyn!121,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1.Dopamine(_degraded~0,wtasyn!125)@c1.Dopamine(_degraded~0,wtasyn!126)@c1.Dopamine(_degraded~0,wtasyn!127)@c1 -> WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!127,proteasome,wtasyn!120,wtasyn!121,wtasyn,wtasyn,wtasyn)@c2.Dopamine(_degraded~0,wtasyn!104)@c2.Dopamine(_degraded~0,wtasyn!105)@c2.Dopamine(_degraded~0,wtasyn!113)@c2.Dopamine(_degraded~0,wtasyn!114)@c2.Dopamine(_degraded~0,wtasyn!123)@c2.Dopamine(_degraded~0,wtasyn!125)@c2.Dopamine(_degraded~0,wtasyn!126)@c2.Dopamine(_degraded~0,wtasyn!127)@c2 k_OligAutophagUptake #Modifiers(s26)
	re66: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!127,proteasome,wtasyn!120,wtasyn!121,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1.Dopamine(_degraded~0,wtasyn!125)@c1.Dopamine(_degraded~0,wtasyn!126)@c1.Dopamine(_degraded~0,wtasyn!127)@c1 + WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1 -> WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!127,proteasome,wtasyn!120,wtasyn!121,wtasyn!122,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!128,proteasome,wtasyn!122,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1.Dopamine(_degraded~0,wtasyn!125)@c1.Dopamine(_degraded~0,wtasyn!126)@c1.Dopamine(_degraded~0,wtasyn!127)@c1.Dopamine(_degraded~0,wtasyn!128)@c1 k_OligomerForm #Modifiers(s26, s7)
	re67: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!127,proteasome,wtasyn!120,wtasyn!121,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1.Dopamine(_degraded~0,wtasyn!125)@c1.Dopamine(_degraded~0,wtasyn!126)@c1.Dopamine(_degraded~0,wtasyn!127)@c1 + Proteasome(wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!127,proteasome,wtasyn!120,wtasyn!121,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1.Dopamine(_degraded~0,wtasyn!125)@c1.Dopamine(_degraded~0,wtasyn!126)@c1.Dopamine(_degraded~0,wtasyn!127)@c1.Proteasome(wtasyn!111)@c1 k_ProteasomeBind #Modifiers(s26, s35)
	re68: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!127,proteasome,wtasyn!120,wtasyn!121,wtasyn!122,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!128,proteasome,wtasyn!122,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1.Dopamine(_degraded~0,wtasyn!125)@c1.Dopamine(_degraded~0,wtasyn!126)@c1.Dopamine(_degraded~0,wtasyn!127)@c1.Dopamine(_degraded~0,wtasyn!128)@c1 + Proteasome(wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!127,proteasome,wtasyn!120,wtasyn!121,wtasyn!122,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!128,proteasome,wtasyn!122,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1.Dopamine(_degraded~0,wtasyn!125)@c1.Dopamine(_degraded~0,wtasyn!126)@c1.Dopamine(_degraded~0,wtasyn!127)@c1.Dopamine(_degraded~0,wtasyn!128)@c1.Proteasome(wtasyn!111)@c1 k_ProteasomeBind #Modifiers(s27, s35)
	re69: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c3.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c3 -> WTasyn2merCMADegr()@c3 r68_k1 #Modifiers(s53)
	re70: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c3 -> WTasyn(cmadegr~CMADEGR,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c3 r69_k1 #Modifiers(s52)
	re71: WTasyn9merOnLamp()@c3 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn!122,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!122,wtasyn,wtasyn,wtasyn,wtasyn)@c1 + Lamp2a()@c3 k_LampFreeWTasyn #Modifiers(s501)
	re72: DopModWTasyn2merOnLamp()@c3 + WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1 -> DopModWTasyn3merOnLamp()@c3 k_OligomerForm #Modifiers(s482, s7)
	re73: DopModWTasyn3merOnLamp()@c3 + WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1 -> DopModWTasyn4merOnLamp()@c3 k_OligomerForm #Modifiers(s483, s7)
	re74: DopModWTasyn4merOnLamp()@c3 + WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1 -> DopModWTasyn5merOnLamp()@c3 k_OligomerForm #Modifiers(s484, s7)
	re75: DopModWTasyn5merOnLamp()@c3 + WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1 -> DopModWTasyn6merOnLamp()@c3 k_OligomerForm #Modifiers(s491, s7)
	re76: WTasyn3merOnLamp()@c3 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1 + Lamp2a()@c3 k_LampFreeWTasyn #Modifiers(s494)
	re77: WTasyn4merOnLamp()@c3 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn,wtasyn)@c1 + Lamp2a()@c3 k_LampFreeWTasyn #Modifiers(s495)
	re78: WTasyn5merOnLamp()@c3 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn,wtasyn,wtasyn)@c1 + Lamp2a()@c3 k_LampFreeWTasyn #Modifiers(s496)
	re79: WTasyn6merOnLamp()@c3 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn,wtasyn,wtasyn,wtasyn)@c1 + Lamp2a()@c3 k_LampFreeWTasyn #Modifiers(s498)
	re80: WTasyn7merOnLamp()@c3 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1 + Lamp2a()@c3 k_LampFreeWTasyn #Modifiers(s499)
	re81: WTasyn8merOnLamp()@c3 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn,wtasyn,wtasyn)@c1 + Lamp2a()@c3 k_LampFreeWTasyn #Modifiers(s500)
	re82: WTasyn8merOnLamp()@c3 + WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn,wtasyn,wtasyn)@c1 -> Lamp2a()@c3 k_WTOligBindOnLamp #Modifiers(s500, s30)
	re83: Lamp2a()@c3 + WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1 -> WTasyn3merOnLamp()@c3 k_WTOligBindOnLamp #Modifiers(s51, s20)
	re84: Lamp2a()@c3 + WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn,wtasyn)@c1 -> WTasyn4merOnLamp()@c3 k_WTOligBindOnLamp #Modifiers(s51, s24)
	re85: Lamp2a()@c3 + WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn,wtasyn,wtasyn,wtasyn)@c1 -> WTasyn6merOnLamp()@c3 k_WTOligBindOnLamp #Modifiers(s51, s32)
	re86: Lamp2a()@c3 + WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1 -> DopModWTasynOnLamp()@c3 k_DopModWTasynLampBind #Modifiers(s51, s7)
	re87: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn,wtasyn)@c2.Dopamine(_degraded~0,wtasyn!104)@c2.Dopamine(_degraded~0,wtasyn!105)@c2.Dopamine(_degraded~0,wtasyn!113)@c2.Dopamine(_degraded~0,wtasyn!114)@c2 -> DopModWTasyn4merM_Adegr()@c2 k_M_autophagyDegr #Modifiers(s530)
	re88: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn,wtasyn,wtasyn)@c2.Dopamine(_degraded~0,wtasyn!104)@c2.Dopamine(_degraded~0,wtasyn!105)@c2.Dopamine(_degraded~0,wtasyn!113)@c2 -> DopModWTasyn3merM_Adegr()@c2 k_M_autophagyDegr #Modifiers(s531)
	re89: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c2.Dopamine(_degraded~0,wtasyn!104)@c2.Dopamine(_degraded~0,wtasyn!105)@c2 -> DopModWTasyn2merM_Adegr()@c2 k_M_autophagyDegr #Modifiers(s527)
	re90: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn,wtasyn,wtasyn)@c2.Dopamine(_degraded~0,wtasyn!104)@c2.Dopamine(_degraded~0,wtasyn!105)@c2.Dopamine(_degraded~0,wtasyn!113)@c2.Dopamine(_degraded~0,wtasyn!114)@c2.Dopamine(_degraded~0,wtasyn!123)@c2 -> DopModWTasyn6merM_Adegr()@c2 k_M_autophagyDegr #Modifiers(s529)
	re91: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn,wtasyn,wtasyn,wtasyn)@c2.Dopamine(_degraded~0,wtasyn!104)@c2.Dopamine(_degraded~0,wtasyn!105)@c2.Dopamine(_degraded~0,wtasyn!113)@c2.Dopamine(_degraded~0,wtasyn!114)@c2.Dopamine(_degraded~0,wtasyn!123)@c2.Dopamine(_degraded~0,wtasyn!125)@c2 -> DopModWTasyn7merM_Adegr()@c2 k_M_autophagyDegr #Modifiers(s528)
	re92: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn,wtasyn,wtasyn)@c2.Dopamine(_degraded~0,wtasyn!104)@c2.Dopamine(_degraded~0,wtasyn!105)@c2.Dopamine(_degraded~0,wtasyn!113)@c2.Dopamine(_degraded~0,wtasyn!114)@c2.Dopamine(_degraded~0,wtasyn!123)@c2.Dopamine(_degraded~0,wtasyn!125)@c2.Dopamine(_degraded~0,wtasyn!126)@c2 -> DopModWTasyn7merM_Adegr()@c2 k_M_autophagyDegr #Modifiers(s526)
	re93: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c2.WTasyn(cmadegr~0,dopamine!127,proteasome,wtasyn!120,wtasyn!121,wtasyn,wtasyn,wtasyn)@c2.Dopamine(_degraded~0,wtasyn!104)@c2.Dopamine(_degraded~0,wtasyn!105)@c2.Dopamine(_degraded~0,wtasyn!113)@c2.Dopamine(_degraded~0,wtasyn!114)@c2.Dopamine(_degraded~0,wtasyn!123)@c2.Dopamine(_degraded~0,wtasyn!125)@c2.Dopamine(_degraded~0,wtasyn!126)@c2.Dopamine(_degraded~0,wtasyn!127)@c2 -> DopModWTasyn8merM_Adegr()@c2 k_M_autophagyDegr #Modifiers(s525)
	re94: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1 + WTasyndegr()@c3 -> WTasyn2degr()@c3 k_2merForm #Modifiers(s17, s78)
	re95: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1 + WTasyn2degr()@c3 -> WTasyn3merOnLamp()@c3 k_OligomerForm #Modifiers(s17, s85)
	re96: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1 + WTasyn3merOnLamp()@c3 -> WTasyn4merOnLamp()@c3 k_OligomerForm #Modifiers(s17, s494)
	re97: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1 + WTasyn4merOnLamp()@c3 -> WTasyn5merOnLamp()@c3 k_OligomerForm #Modifiers(s17, s495)
	re98: WTasyn5merOnLamp()@c3 + WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1 -> WTasyn6merOnLamp()@c3 k_OligomerForm #Modifiers(s496, s17)
	re99: WTasyn6merOnLamp()@c3 + WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1 -> WTasyn7merOnLamp()@c3 k_OligomerForm #Modifiers(s498, s17)
	re100: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1 + WTasyn7merOnLamp()@c3 -> WTasyn8merOnLamp()@c3 k_OligomerForm #Modifiers(s17, s499)
	re101: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1 + WTasyn8merOnLamp()@c3 -> WTasyn9merOnLamp()@c3 k_OligomerForm #Modifiers(s17, s500)
	re102: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome!111,wtasyn!103,wtasyn!106,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1.Proteasome(wtasyn!111)@c1 -> Proteasome(wtasyn)@c1 k_ProtOligDegr #Modifiers(s381)
	re103: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn,wtasyn)@c1.Proteasome(wtasyn!111)@c1 -> Proteasome(wtasyn)@c1 k_ProtOligDegr #Modifiers(s383)
	re104: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn,wtasyn,wtasyn)@c1.Proteasome(wtasyn!111)@c1 -> Proteasome(wtasyn)@c1 k_ProtOligDegr #Modifiers(s385)
	re105: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Proteasome(wtasyn!111)@c1 -> Proteasome(wtasyn)@c1 k_ProtOligDegr #Modifiers(s387)
	re106: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1.Proteasome(wtasyn!111)@c1 -> Proteasome(wtasyn)@c1 k_ProtOligDegr #Modifiers(s389)
	re107: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn,wtasyn,wtasyn)@c1.Proteasome(wtasyn!111)@c1 -> Proteasome(wtasyn)@c1 k_ProtOligDegr #Modifiers(s391)
	re108: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn!122,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!122,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Proteasome(wtasyn!111)@c1 -> Proteasome(wtasyn)@c1 k_ProtOligDegr #Modifiers(s393)
	re109: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome!111,wtasyn!103,wtasyn!106,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Proteasome(wtasyn!111)@c1 -> Proteasome(wtasyn)@c1 k_ProtOligDegr #Modifiers(s473)
	re110: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Proteasome(wtasyn!111)@c1 -> Proteasome(wtasyn)@c1 k_ProtOligDegr #Modifiers(s474)
	re111: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1.Proteasome(wtasyn!111)@c1 -> Proteasome(wtasyn)@c1 k_ProtOligDegr #Modifiers(s475)
	re112: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1.Dopamine(_degraded~0,wtasyn!125)@c1.Proteasome(wtasyn!111)@c1 -> Proteasome(wtasyn)@c1 k_ProtOligDegr #Modifiers(s476)
	re113: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1.Dopamine(_degraded~0,wtasyn!125)@c1.Dopamine(_degraded~0,wtasyn!126)@c1.Proteasome(wtasyn!111)@c1 -> Proteasome(wtasyn)@c1 k_ProtOligDegr #Modifiers(s477)
	re114: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!127,proteasome,wtasyn!120,wtasyn!121,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1.Dopamine(_degraded~0,wtasyn!125)@c1.Dopamine(_degraded~0,wtasyn!126)@c1.Dopamine(_degraded~0,wtasyn!127)@c1.Proteasome(wtasyn!111)@c1 -> Proteasome(wtasyn)@c1 k_ProtOligDegr #Modifiers(s478)
	re115: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!127,proteasome,wtasyn!120,wtasyn!121,wtasyn!122,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!128,proteasome,wtasyn!122,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1.Dopamine(_degraded~0,wtasyn!125)@c1.Dopamine(_degraded~0,wtasyn!126)@c1.Dopamine(_degraded~0,wtasyn!127)@c1.Dopamine(_degraded~0,wtasyn!128)@c1.Proteasome(wtasyn!111)@c1 -> Proteasome(wtasyn)@c1 k_ProtOligDegr #Modifiers(s479)
	re116: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn!122,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!122,wtasyn!124,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!124,wtasyn,wtasyn,wtasyn,wtasyn)@c1 + Proteasome(wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome!111,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn!122,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!122,wtasyn!124,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!124,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Proteasome(wtasyn!111)@c1 k_ProteasomeBind #Modifiers(s33, s35)
	re117: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!127,proteasome,wtasyn!120,wtasyn!121,wtasyn!122,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!128,proteasome,wtasyn!122,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1.Dopamine(_degraded~0,wtasyn!125)@c1.Dopamine(_degraded~0,wtasyn!126)@c1.Dopamine(_degraded~0,wtasyn!127)@c1.Dopamine(_degraded~0,wtasyn!128)@c1 -> WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!127,proteasome,wtasyn!120,wtasyn!121,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1.Dopamine(_degraded~0,wtasyn!125)@c1.Dopamine(_degraded~0,wtasyn!126)@c1.Dopamine(_degraded~0,wtasyn!127)@c1 + WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1 k_DisRate #Modifiers(s27)
	re118: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!127,proteasome,wtasyn!120,wtasyn!121,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1.Dopamine(_degraded~0,wtasyn!125)@c1.Dopamine(_degraded~0,wtasyn!126)@c1.Dopamine(_degraded~0,wtasyn!127)@c1 -> WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1.Dopamine(_degraded~0,wtasyn!125)@c1.Dopamine(_degraded~0,wtasyn!126)@c1 + WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1 k_DisRate #Modifiers(s26)
	re119: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!126,proteasome,wtasyn!118,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1.Dopamine(_degraded~0,wtasyn!125)@c1.Dopamine(_degraded~0,wtasyn!126)@c1 -> WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1.Dopamine(_degraded~0,wtasyn!125)@c1 + WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1 k_DisRate #Modifiers(s25)
	re120: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!125,proteasome,wtasyn!117,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1.Dopamine(_degraded~0,wtasyn!125)@c1 -> WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1 + WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1 k_DisRate #Modifiers(s21)
	re121: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1 -> WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1 + WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1 k_DisRate #Modifiers(s2)
	re122: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!123,proteasome,wtasyn!115,wtasyn!116,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1.Dopamine(_degraded~0,wtasyn!123)@c1 -> WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!114,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1.Dopamine(_degraded~0,wtasyn!114)@c1 + WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1 k_DisRate #Modifiers(s1)
	re123: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn!106,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!113,proteasome,wtasyn!106,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1.Dopamine(_degraded~0,wtasyn!113)@c1 -> WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1 + WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1 k_DisRate #Modifiers(s5)
	re124: WTasyn(cmadegr~0,dopamine!105,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1.Dopamine(_degraded~0,wtasyn!105)@c1 -> WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1 + WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1 k_DisRate #Modifiers(s6)
	re125: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn!122,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!122,wtasyn,wtasyn,wtasyn,wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1 + WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn,wtasyn,wtasyn)@c1 k_DisRate #Modifiers(s29)
	re126: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn,wtasyn,wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1 + WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1 k_DisRate #Modifiers(s30)
	re127: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn,wtasyn,wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn,wtasyn,wtasyn,wtasyn)@c1 + WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1 k_DisRate #Modifiers(s31)
	re128: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn,wtasyn,wtasyn,wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1 + WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn,wtasyn,wtasyn)@c1 k_DisRate #Modifiers(s32)
	re129: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn,wtasyn,wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn,wtasyn)@c1 + WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1 k_DisRate #Modifiers(s23)
	re130: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn,wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1 + WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1 k_DisRate #Modifiers(s24)
	re131: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn,wtasyn,wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c1 + WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1 k_DisRate #Modifiers(s20)
	re132: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn,wtasyn,wtasyn,wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1 + WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1 k_DisRate #Modifiers(s18)
	re133: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn!122,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!122,wtasyn!124,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!124,wtasyn,wtasyn,wtasyn,wtasyn)@c1 + WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!107,wtasyn!109,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!103,wtasyn!106,wtasyn!108,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!106,wtasyn!107,wtasyn!110,wtasyn!115,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!108,wtasyn!109,wtasyn!110,wtasyn!116,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!115,wtasyn!116,wtasyn!117,wtasyn!118,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!117,wtasyn!119,wtasyn!120,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!118,wtasyn!119,wtasyn!121,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!120,wtasyn!121,wtasyn!122,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!122,wtasyn!124,wtasyn,wtasyn,wtasyn)@c1.WTasyn(cmadegr~0,dopamine,proteasome,wtasyn!124,wtasyn,wtasyn,wtasyn,wtasyn)@c1 r132_k1 #Modifiers(s33, s17)
	re134: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1 -> WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c2 k_OligAutophagUptake #Modifiers(s17)
	re135: WTasyn(cmadegr~0,dopamine,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c2 -> WTasyn2merM_Adegr()@c2 k_M_autophagyDegr #Modifiers(s533)
	re136: WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c1.Dopamine(_degraded~0,wtasyn!104)@c1 -> WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c2.Dopamine(_degraded~0,wtasyn!104)@c2 k_OligAutophagUptake #Modifiers(s7)
	re137: WTasyn(cmadegr~0,dopamine!104,proteasome,wtasyn,wtasyn,wtasyn,wtasyn,wtasyn)@c2.Dopamine(_degraded~0,wtasyn!104)@c2 -> DopModWTasyn2merM_Adegr()@c2 k_M_autophagyDegr #Modifiers(s535)
end reaction rules
end model
