###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1503020000', 'http://identifiers.org/biomodels.db/BIOMD0000000570']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/12414257']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0006091']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@creatorEmail:'winter@kapora.de'
#@creatorName:'Winter Felix'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 20 molecules and 18 reactions. The translated model has 15 molecules and 28 rules'
###
begin model
begin parameters
	parameter_1 90000.0
	parameter_2 0.0039
	parameter_3 96500.0
	parameter_4 26.73
	parameter_5 -70.0
	parameter_6 150.0
	parameter_8 2.9e-07
	parameter_9 0.5
	parameter_11 0.92
	parameter_12 2.212
	parameter_14 0.0476
	parameter_15 9.0
	parameter_16 0.12
	parameter_17 1.0
	parameter_18 4.0
	parameter_19 0.05
	parameter_20 42.6
	parameter_21 0.212
	parameter_23 86.7
	parameter_24 2000.0
	parameter_25 44.8
	parameter_26 0.00628
	parameter_27 0.5
	parameter_28 0.149
	parameter_29 3666.0
	parameter_30 20.0
	parameter_31 10.0
	parameter_32 1.6
	parameter_33 0.0361
	parameter_34 8.6
	parameter_35 2.73
	parameter_36 0.012
	parameter_38 0.0055
	parameter_47 0.0192
	V_max_Mito 0.05233
	Km_Mito 0.05
	KI_Mito 183.3
	n_Mito 0.1
	K_O2_Mito 0.001
	is_rising 1.0
	alpha_F_in 0.5
	t_on 5.0
	t_end 360.0
	v_stim_constant 0.23
	Compartment_7 compartment_4
	ModelValue_35 (0.012)
	ModelValue_60 (5.68)
	ModelValue_50 (0.5)
	ModelValue_51 (0.006)
	ModelValue_53 (360.0)
	ModelValue_52 (5.0)
	is_maximum 0
	is_falling 0
	r15_v 0.149000
end parameters
begin compartments
	#volume units: volume
	compartment_1 3 1.0 #Tissue
	compartment_2 3 1.0 #Arteries
	compartment_3 3 1.0 #Capillaries
	compartment_4 3 0.0237 #Venous balloon
end compartments
begin molecule types
	#^ bqbiol:is chebi:CHEBI:15422
	ATP()
	#^ bqbiol:is chebi:CHEBI:4167, chebi:CHEBI:4167, chebi:CHEBI:4167
	GLC()
	#^ bqbiol:is chebi:CHEBI:15846
	NADpl()
	#^ bqbiol:is chebi:CHEBI:29101
	Napl()
	#^ bqbiol:is chebi:CHEBI:15361
	PYR()
	#^ bqbiol:is chebi:CHEBI:16761
	ADP()
	#^ bqbiol:is chebi:CHEBI:16919
	Cr()
	#^ bqbiol:is chebi:CHEBI:18021
	PEP()
	#^ bqbiol:is chebi:CHEBI:15379, chebi:CHEBI:15379, chebi:CHEBI:15379
	O2()
	#^ bqbiol:is chebi:CHEBI:16908
	NADH()
	#^ bqbiol:is chebi:CHEBI:5656
	dHb()
	#^ bqbiol:is chebi:CHEBI:29052
	GAP()
	#^ bqbiol:is chebi:CHEBI:17287
	PCr()
	#^ bqbiol:is chebi:CHEBI:422, chebi:CHEBI:422, chebi:CHEBI:422
	LAC()
	parameter_7
end molecule types
begin seed species
	@compartment_1:Napl() 15.0 #Napl #species_1
	@compartment_1:ATP() 2.2 #ATP #species_2
	@compartment_1:ADP() 0.0119296850858459 #ADP #species_3
	@compartment_1:GLC() 1.2 #GLC #species_4
	@compartment_1:GAP() 0.0057 #GAP #species_5
	@compartment_1:NADpl() 0.186 #NADpl #species_6
	@compartment_1:NADH() 0.026 #NADH #species_7
	@compartment_1:PYR() 0.16 #PYR #species_8
	@compartment_1:PEP() 0.02 #PEP #species_9
	@compartment_1:LAC() 1.0 #LAC #species_10
	@compartment_1:PCr() 5.0 #PCr #species_11
	@compartment_1:Cr() 5.0 #Cr #species_12
	@compartment_1:O2() 0.0262 #O2 #species_13
	@compartment_2:$O2() 8.34 #O2 #species_14
	@compartment_2:$GLC() 4.8 #GLC #species_15
	@compartment_2:$LAC() 0.313 #LAC #species_16
	@compartment_3:GLC() 4.56 #GLC #species_17
	@compartment_3:LAC() 0.35 #LAC #species_18
	@compartment_3:O2() 7.01 #O2 #species_19
	@compartment_3:dHb() 0.0630000000000001 #dHb #dHb
	parameter_7@compartment_1 2.2
end seed species
begin observables
	Species Napl_compartment_1 @compartment_1:Napl() #Na+
	Species ATP_compartment_1 @compartment_1:ATP() #ATP
	Species ADP_compartment_1 @compartment_1:ADP() #ADP
	Species GLC_compartment_1 @compartment_1:GLC() #GLC
	Species GAP_compartment_1 @compartment_1:GAP() #GAP
	Species NADpl_compartment_1 @compartment_1:NADpl() #NAD+
	Species NADH_compartment_1 @compartment_1:NADH() #NADH
	Species PYR_compartment_1 @compartment_1:PYR() #PYR
	Species PEP_compartment_1 @compartment_1:PEP() #PEP
	Species LAC_compartment_1 @compartment_1:LAC() #LAC
	Species PCr_compartment_1 @compartment_1:PCr() #PCr
	Species Cr_compartment_1 @compartment_1:Cr() #Cr
	Species O2_compartment_1 @compartment_1:O2() #O2
	Species O2_compartment_2 @compartment_2:O2() #O2
	Species GLC_compartment_2 @compartment_2:GLC() #GLC
	Species LAC_compartment_2 @compartment_2:LAC() #LAC
	Species GLC_compartment_3 @compartment_3:GLC() #GLC
	Species LAC_compartment_3 @compartment_3:LAC() #LAC
	Species O2_compartment_3 @compartment_3:O2() #O2
	Species dHb_compartment_3 @compartment_3:dHb() #dHb
	Species parameter_7 parameter_7
end observables
begin functions
	maximum() = ModelValue_35*ModelValue_50
	slope_down() = maximum*(t_end + t_on - time())/t_on
	slope_up() = ModelValue_51*time()/ModelValue_52
	parameter_37() = is_falling*slope_down + is_maximum*maximum + is_rising*slope_up + parameter_36
	F_out() = parameter_36*(227.349430861571*parameter_37*(1/Compartment_7)^(-0.5)/Compartment_7 + 0.00056169/Compartment_7^2)/(1 + 227.349430861571*parameter_36*(1/Compartment_7)^(-0.5)/Compartment_7)
	arRatecompartment_4() = -F_out + parameter_37
	dAMP_dATP() = parameter_11*parameter_12/(parameter_7*sqrt(parameter_11^2 + 4*parameter_11*(parameter_12/parameter_7 - 1))) + parameter_11/2 - sqrt(parameter_11^2 + 4*parameter_11*(parameter_12/parameter_7 - 1))/2 - 1
	arRateparameter_7() = (-ATPases + 15*mitochondrial_respiration - reaction_2 - 2*reaction_4 + reaction_5 + reaction_6 + reaction_9)/(1 - dAMP_dATP)
	O2c_bar() = 1.0*O2_compartment_3
	ratioO2c_bar() = O2c_bar/ModelValue_60
	rCBF() = parameter_37/ModelValue_35
	parameter_10() = parameter_7*(-parameter_11 + (parameter_11^2 + 4*parameter_11*(parameter_12/parameter_7 - 1))^0.5)/2
	v_Mito_H3() = O2_compartment_3*PYR_compartment_1*V_max_Mito/((1.0*K_O2_Mito + 1.0*O2_compartment_3)*(Km_Mito + 1.0*PYR_compartment_1)*((parameter_7/(KI_Mito*parameter_10))^n_Mito + 1))
	parameter_22() = -1.0*NADH_compartment_1 + parameter_21
	NADpl_ar() = 1.0*parameter_22
	parameter_13() = -parameter_10 + parameter_12 - parameter_7
	ADP_ar() = 1.0*parameter_10
	rVv() = 0.0237/Compartment_7
	rCMRO2() = 52.0833333333333*mitochondrial_respiration
	Cr_ar() = -1.0*PCr_compartment_1 + 1.0*parameter_31
	ATP_ar() = 1.0*parameter_7
	fRate0() = parameter_1*parameter_2*(parameter_4*ln(1.0*parameter_6/Napl_compartment_1) - parameter_5)/parameter_3
	fRate1() = ATP_compartment_1*Napl_compartment_1*parameter_1*parameter_8/(1.0*ATP_compartment_1/parameter_9 + 1.0)
	fRate2() = 1.0*parameter_14*(-GLC_compartment_1/(1.0*GLC_compartment_1 + 1.0*parameter_15) + GLC_compartment_3/(1.0*GLC_compartment_3 + 1.0*parameter_15))
	fRate3() = parameter_16/(1.0*GLC_compartment_1*(1.0*ATP_compartment_1/parameter_17)^parameter_18 + 1.0*GLC_compartment_1 + 1.0*parameter_19*(1.0*ATP_compartment_1/parameter_17)^parameter_18 + 1.0*parameter_19)
	fRate4() = ADP_compartment_1*parameter_20/NADH_compartment_1
	fRate6() = 1.0*parameter_24
	fRate6m() = 1.0*parameter_25
	fRate7() = 1.0*parameter_26*(LAC_compartment_1/(1.0*LAC_compartment_1 + 1.0*parameter_27) - LAC_compartment_3/(1.0*LAC_compartment_3 + 1.0*parameter_27))
	fRate8() = 1.0*parameter_29
	fRate8m() = 1.0*parameter_30
	fRate9() = 1.0*parameter_32*(-1.0*O2_compartment_1 + parameter_33*(-1 + 1.0*parameter_34/O2_compartment_3)^(-1/parameter_35))
	fRate10() = 2.0*parameter_37/parameter_38
	fRate10m() = 2.0*parameter_37/parameter_38
	fRate11() = 2.0*parameter_37/parameter_38
	fRate11m() = 2.0*parameter_37/parameter_38
	fRate12() = 2.0*parameter_37/parameter_38
	fRate12m() = 2.0*parameter_37/parameter_38
	fRate13() = v_Mito_H3
	fRate14() = 0.149
	fRate16() = 2.0*parameter_37*(1.0*O2_compartment_2 - 1.0*O2_compartment_3)
end functions
begin reaction rules
	reaction_1_products_0: 0  -> Napl()@compartment_1 fRate0() #Modifiers(species_1)
	reaction_2_reactants_0: 0  -> Napl()@compartment_1 -1*3.0*(fRate1()) #Modifiers(species_2, species_1)
	reaction_2_reactants_1: 0  -> ATP()@compartment_1 -1*(fRate1()) #Modifiers(species_2, species_1)
	reaction_2_products_0: 0  -> ADP()@compartment_1 fRate1() #Modifiers(species_2, species_1)
	reaction_3_reactants_0: 0  -> GLC()@compartment_3 -1*100.0*(fRate2()) #Modifiers(species_17, species_4)
	reaction_3_products_0: 0  -> GLC()@compartment_1 fRate2() #Modifiers(species_17, species_4)
	reaction_4: GLC()@compartment_1 + ATP()@compartment_1 -> GAP()@compartment_1 + GAP()@compartment_1 + ADP()@compartment_1 fRate3() #Modifiers(species_2, species_4)
	reaction_5: GAP()@compartment_1 + NADpl()@compartment_1 -> NADH()@compartment_1 + PEP()@compartment_1 fRate4() #Modifiers(species_3, species_5, species_3, species_6, species_7)
	reaction_6: ADP()@compartment_1 + PEP()@compartment_1 -> ATP()@compartment_1 + PYR()@compartment_1 parameter_23 #Modifiers(species_3, species_9)
	reaction_7: PYR()@compartment_1 + NADH()@compartment_1 <-> LAC()@compartment_1 + NADpl()@compartment_1 fRate6(),fRate6m() #Modifiers(species_8, species_7, species_10, species_6)
	reaction_8_reactants_0: 0  -> LAC()@compartment_1 -1*(fRate7()) #Modifiers(species_10, species_18)
	reaction_8_products_0: 0  -> LAC()@compartment_3 100.0*fRate7() #Modifiers(species_10, species_18)
	reaction_9: PCr()@compartment_1 + ADP()@compartment_1 <-> Cr()@compartment_1 + ATP()@compartment_1 fRate8(),fRate8m() #Modifiers(species_11, species_3, species_12, species_2)
	reaction_10_reactants_0: 0  -> O2()@compartment_3 -1*100.0*(fRate9()) #Modifiers(species_19, species_13)
	reaction_10_products_0: 0  -> O2()@compartment_1 fRate9() #Modifiers(species_19, species_13)
	reaction_11: O2()@compartment_2 <-> O2()@compartment_3 fRate10(),fRate10m() #Modifiers(species_14, species_19)
	reaction_12: GLC()@compartment_2 <-> GLC()@compartment_3 fRate11(),fRate11m() #Modifiers(species_15, species_17)
	reaction_13: LAC()@compartment_2 <-> LAC()@compartment_3 fRate12(),fRate12m() #Modifiers(species_16, species_18)
	mitochondrial_respiration_reactants_0: 0  -> PYR()@compartment_1 -1*(fRate13())
	mitochondrial_respiration_reactants_1: 0  -> NADH()@compartment_1 -1*(fRate13())
	mitochondrial_respiration_reactants_2: 0  -> O2()@compartment_1 -1*3.0*(fRate13())
	mitochondrial_respiration_products_0: 0  -> ATP()@compartment_1 fRate13()
	ATPases_reactants_0: 0  -> ATP()@compartment_1 -1*(fRate14())
	Na__inflow_after_stimulation: 0  -> Napl()@compartment_1 v_stim_constant
	inflow_of_dHb_products_0: 0  -> dHb()@compartment_3 fRate16() #Modifiers(species_14, species_19, species_14, species_19)
	outflow_of_dHb: dHb()@compartment_3 -> 0  F_out #Modifiers(dHb)
	0  -> compartment_4()@compartment_1 arRatecompartment_4 #rateLaw
	0  -> parameter_7()@compartment_1 arRateparameter_7 #rateLaw
end reaction rules
end model
