###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000575', 'http://identifiers.org/biomodels.db/MODEL1504130001']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/19136028']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0042417', 'http://identifiers.org/go/GO:0043161', 'http://identifiers.org/go/GO:0061684', 'http://identifiers.org/go/GO:0070841', 'http://identifiers.org/go/GO:0016236']
#@BQB_HAS_PROPERTY:['http://identifiers.org/doid/DOID:14330']
#@creatorEmail:'lloret@ebi.ac.uk'
#@creatorName:'Lloret i Villas Audald'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 76 molecules and 58 reactions. The translated model has 44 molecules and 201 rules'
###
begin model
begin parameters
	g11 1.0
	p186 0.5
	p110 1.0
	p19 1.0
	p18 1.0
	k1 0.03
	g22 1.0
	p286 0.25
	p210 0.5
	p29 0.5
	p28 0.5
	i26 -1.0
	k2 0.01
	g326 1.0
	g23 1.0
	k3 0.007
	k4 0.9
	i41 -0.01
	i42 -0.01
	i43 -0.01
	g412 1.0
	g415 1.0
	g427 1.0
	g430 1.0
	k6 0.5
	g613 1.0
	g614 1.0
	g615 1.0
	k7 0.03
	g715 1.0
	g716 1.0
	g717 1.0
	k8 0.001
	g819 1.0
	g821 1.0
	k9 0.001
	g919 1.0
	g920 1.0
	k10 0.05
	g1025 1.0
	g1072 1.0
	k11 0.05
	g1124 1.0
	g1170 1.0
	k13 0.1
	i131 -0.01
	i1310 -0.01
	g1335 1.0
	g1336 1.0
	g1351 1.0
	k14 3.0
	g1437 1.0
	g1467 1.0
	k15 0.2
	i152 -0.1
	g156 1.0
	g1544 1.0
	g1545 1.0
	k16 0.0001
	g1643 1.0
	g1644 1.0
	k17 0.0001
	g1742 1.0
	g1744 1.0
	k18 0.02
	g186 1.0
	g1851 1.0
	k19 0.01
	g196 1.0
	g1951 1.0
	g1953 1.0
	g1960 1.0
	k20 0.1
	g209 1.0
	g2065 1.0
	k21 0.1
	g2166 1.0
	k22 0.5
	g229 1.0
	g2259 1.0
	k23 0.5
	g239 1.0
	g2361 1.0
	g2362 1.0
	k24 1.0
	g2463 1.0
	g2464 1.0
	k25 0.05
	g2552 1.0
	g2555 0.3
	g2556 0.25
	k26f 0.05
	g26f15 1.0
	g26f16 1.0
	g26f18 1.0
	k26r 0.005
	g26r30 1.0
	g26r68 1.0
	k27f 0.05
	g27f15 1.0
	g27f16 1.0
	g27f68 1.0
	k27r 0.005
	g27r30 1.0
	g27r69 1.0
	k28f 0.05
	g28f15 1.0
	g28f16 1.0
	g28f69 1.0
	k28r 0.005
	g28r30 1.0
	g28r70 1.0
	k29 0.05
	g2915 1.0
	g2916 1.0
	g2971 1.0
	k30 0.001
	g301 1.0
	g3030 1.0
	k31 0.05
	g3172 1.0
	g3173 1.0
	k32 0.001
	g321 1.0
	p328 0.1
	p329 0.1
	p3210 0.1
	p3286 0.05
	g3274 1.0
	k33 0.001
	g332 1.0
	g3330 1.0
	k34 0.05
	g3472 1.0
	g3475 1.0
	k35 0.001
	g352 1.0
	p358 0.1
	p359 0.1
	p3510 0.1
	p3586 0.05
	g3576 1.0
	k36 0.05
	i368 -0.1
	i369 -0.1
	i3610 -0.1
	i3686 -0.05
	g3677 1.0
	g3679 1.0
	k37 0.05
	g3770 1.0
	g3773 1.0
	k38 0.7
	i381 -0.01
	i382 -0.01
	i383 -0.01
	g3812 1.0
	g3815 1.0
	g3830 1.0
	g3878 1.0
	k43 0.05
	g431 1.0
	g4384 1.0
	k44 0.045
	g442 1.0
	g4484 1.0
	k45 0.04
	g453 1.0
	g4584 1.0
	k46 0.03
	i468 -0.1
	i469 -0.1
	i4610 -0.1
	i4686 -0.05
	g4677 1.0
	g4681 1.0
	k47 0.03
	i478 -0.1
	i479 -0.1
	i4710 -0.1
	i4786 -0.05
	g4777 1.0
	g4782 1.0
	k48 0.03
	i488 -0.1
	i489 -0.1
	i4810 -0.1
	i4886 -0.05
	g4877 1.0
	g4883 1.0
	k50 0.05
	g501 1.0
	g5080 1.0
	k51 0.05
	g512 1.0
	g5180 1.0
	k52 0.05
	g523 1.0
	g5280 1.0
	k53 0.05
	g534 1.0
	g5380 1.0
	k54 0.005
	g5410 1.0
	g5419 1.0
	k55 0.05
	g556 1.0
	g5586 1.0
	k56 0.05
	g5686 1.0
	g5687 1.0
	k57 0.005
	g5710 1.0
	g5762 1.0
	k100 0.005
	g10037 1.0
	g10051 1.0
	g100115 1.0
	k101 0.005
	g10136 1.0
	g10151 1.0
	g101115 1.0
	k102 0.005
	g10210 1.0
	g10251 1.0
	g102115 1.0
	k115 0.5
	g11565 1.0
	g11566 1.0
	g115118 1.0
	k116 0.5
	g11642 1.0
	g116118 1.0
	ATP_Neuronal_cytosol 1.2044e+24 #original 2.0substance/volume
	ATP 1.2044e+24 #original 2.0substance/volume
	TH_Neuronal_cytosol 3.6132e+23 #original 0.6substance/volume
	TH 3.6132e+23 #original 0.6substance/volume
	VMAT2_Neuronal_cytosol 1.2044e+24 #original 2.0substance/volume
	VMAT2 1.2044e+24 #original 2.0substance/volume
	MAO_Neuronal_cytosol 9.033e+23 #original 1.5substance/volume
	MAO 9.033e+23 #original 1.5substance/volume
	ALDH_Neuronal_cytosol 9.033e+23 #original 1.5substance/volume
	ALDH 9.033e+23 #original 1.5substance/volume
	Catalase_Neuronal_cytosol 6.022e+23 #original 1.0substance/volume
	Catalase 6.022e+23 #original 1.0substance/volume
	Gluta_per_Neuronal_cytosol 4.817600000000001e+23 #original 0.8substance/volume
	Gluta_per 4.817600000000001e+23 #original 0.8substance/volume
	Gluta_red_Neuronal_cytosol 4.817600000000001e+23 #original 0.8substance/volume
	Gluta_red 4.817600000000001e+23 #original 0.8substance/volume
	DDC_Neuronal_cytosol 9.033e+23 #original 1.5substance/volume
	DDC 9.033e+23 #original 1.5substance/volume
	SOD_Neuronal_cytosol 3.6132e+23 #original 0.6substance/volume
	SOD 3.6132e+23 #original 0.6substance/volume
	Proteasome_Proteasome 9.033e+23 #original 1.5substance/volume
	Proteasome 9.033e+23 #original 1.5substance/volume
	Lysosome_Lysosome 1.5055e+24 #original 2.5substance/volume
	Lysosome 1.5055e+24 #original 2.5substance/volume
end parameters
begin compartments
	#volume units: volume
	Neuronal_cytosol 3 1.0 #Neuronal cytosol
	Vesicle 3 1.0
	Autophagosome 3 1.0
	Proteasome 3 1.0
	Lysosome 3 1.0
end compartments
begin molecule types
	#^ bqbiol:is chebi:CHEBI:16240
	H2O2()
	#^ bqbiol:hasPart chebi:CHEBI:18243, chebi:CHEBI:16856
	DA_GSH(DA_S_parkin~DA_S_parkin~0,DA_quinone~DA_quinone~0)
	#^ bqbiol:is chebi:CHEBI:17858
	GSSG()
	#^ bqbiol:isVersionOf chebi:CHEBI:27404
	#^ bqbiol:hasProperty chebi:CHEBI:60027
	Neuromelanin()
	#^ bqbiol:is uniprot:O14933
	UbcH8()
	#^ bqbiol:isVersionOf uniprot:P37840
	#^ bqbiol:hasProperty go:GO:0097413
	Lewy_body()
	#^ bqbiol:isVersionOf chebi:CHEBI:32952
	#^ bqbiol:hasProperty chebi:CHEBI:24432
	Bioamines()
	#^ bqbiol:is uniprot:P22314
	E1()
	#^ bqbiol:is go:GO:0005776
	Autophagosome()
	#^ bqbiol:is uniprot:P11142
	Hsc70()
	#^ bqbiol:is chebi:CHEBI:16234
	OH_()
	#^ bqbiol:hasPart uniprot:P61088, uniprot:Q13404
	UbcH13_Uev1a()
	#^ bqbiol:is chebi:CHEBI:17895
	L_Tyr()
	#^ bqbiol:hasProperty pato:PATO:0002355
	#^ bqbiol:isVersionOf chebi:CHEBI:16670
	Fragments()
	#^ bqbiol:is biomodels.sbo:SBO:0000015
	Substrate()
	#^ bqbiol:is go:GO:0031982
	Vesicle()
	#^ bqbiol:is uniprot:P0CG47
	Ubiquitin()
	#^ bqbiol:is chebi:CHEBI:27978
	DOPAL()
	#^ bqbiol:hasPart chebi:CHEBI:50910, chebi:CHEBI:32952
	#^ bqbiol:hasProperty chebi:CHEBI:24432
	V_ntox_ba(Neuromelanin_ntox_Fe3pl~Neuromelanin_ntox_Fe3pl~0)
	#^ bqbiol:is go:GO:0000421
	Preautophagosome_membrane()
	#^ bqbiol:is chebi:CHEBI:15379
	O2(O2_~O2_~0)
	#^ bqbiol:is uniprot:O60260
	Parkin()
	#^ bqbiol:isVersionOf uniprot:P37840
	#^ bqbiol:hasProperty go:GO:0043205
	Fibril()
	#^ bqbiol:is chebi:CHEBI:50910
	Neurotoxins()
	#^ bqbiol:is chebi:CHEBI:41941
	DOPAC()
	#^ bqbiol:is chebi:CHEBI:15377
	H2O()
	#^ bqbiol:is chebi:CHEBI:18243
	V_DA()
	#^ bqbiol:is chebi:CHEBI:16526
	CO2()
	#^ bqbiol:is chebi:CHEBI:18243
	Dopamine()
	#^ bqbiol:is chebi:CHEBI:29191
	OH_radical()
	#^ bqbiol:is chebi:CHEBI:16908
	NADH()
	#^ bqbiol:is chebi:CHEBI:15765
	L_Dopa()
	#^ bqbiol:isVersionOf uniprot:O60260, biomodels.sbo:SBO:0000015
	Parkin_sub()
	#^ bqbiol:hasPart uniprot:P0CG47, uniprot:P22314
	Ub_E1(Hsc70_Protofibril~Hsc70_Protofibril~0,Hsc70_asyn~Hsc70_asyn~0,Hsc70_fibril~Hsc70_fibril~0,Parkin_sub_ub4~Parkin_sub_ub4~0,Parkin_synphilin_1~Parkin_synphilin_1~0,Parkin_synphilin_1_ub~Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~Protofibril_UCH_L1~0,Protofibril_Ub~Protofibril_Ub~0,UCH_L1_asyn_ub4~UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~UbcH13_Uev1a_ub~0,UbcH8_Ub~UbcH8_Ub~0,UbcH8ub2~UbcH8ub2~0,UbcH8ub3~UbcH8ub3~0,UbcH8ub4~UbcH8ub4~0,asyn_UCH_L1~asyn_UCH_L1~0,asyn_ub~asyn_ub~0)
	#^ bqbiol:is chebi:CHEBI:15846
	NADpl()
	#^ bqbiol:is chebi:CHEBI:15356
	Cysteine()
	#^ bqbiol:is uniprot:P37840
	Alpha_synuclein()
	#^ bqbiol:is chebi:CHEBI:29033
	Fe2pl()
	#^ bqbiol:is chebi:CHEBI:16134
	NH3()
	#^ bqbiol:is chebi:CHEBI:29034
	Fe3pl()
	#^ bqbiol:is uniprot:Q9Y6H5
	Synphilin_1()
	#^ bqbiol:is uniprot:P09936
	UCH_L1()
	#^ bqbiol:is chebi:CHEBI:16856
	GSH()
	#^ bqbiol:isVersionOf uniprot:P37840
	Protofibril()
end molecule types
begin seed species
	@Neuronal_cytosol:Protofibril() 3.0110000000000005e+22 # 0.05mol/L * 6.022e23/mol *1.0L #Protofibril #Protofibril
	@Neuronal_cytosol:Fibril() 1.5055000000000002e+22 #original 0.025substance/volume #Fibril #Fibril
	@Neuronal_cytosol:Lewy_body() 6.022e+21 #original 0.01substance/volume #Lewy_body #Lewy_body
	@Neuronal_cytosol:Dopamine() 1.2044e+24 #original 2.0substance/volume #Dopamine #Dopamine
	@Neuronal_cytosol:OH_() 3.011e+23 #original 0.5substance/volume #OH_ #OH
	@Neuronal_cytosol:OH_radical() 1.2044e+22 #original 0.02substance/volume #OH_radical #OH_radical
	@Neuronal_cytosol:H2O2() 6.022000000000001e+22 #original 0.1substance/volume #H2O2 #H2O2
	@Neuronal_cytosol:DA_GSH(DA_S_parkin~0,DA_quinone~DA_quinone) 3.0110000000000005e+22 #original 0.05substance/volume #DA_quinone #DA_quinone
	@Neuronal_cytosol:Ubiquitin() 6.022e+23 #original 1.0substance/volume #Ubiquitin #Ubiquitin
	@Neuronal_cytosol:E1() 1.2044000000000002e+23 #original 0.2substance/volume #E1 #E1
	@Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0) 2.1077e+23 #original 0.35substance/volume #Ub_E1 #Ub_E1
	@Neuronal_cytosol:UbcH8() 1.2044000000000002e+23 #original 0.2substance/volume #UbcH8 #UbcH8
	@Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~UbcH8_Ub,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0) 2.1077e+23 #original 0.35substance/volume #UbcH8_Ub #UbcH8_Ub
	@Neuronal_cytosol:Parkin() 1.2044000000000002e+23 #original 0.2substance/volume #Parkin #Parkin
	@Neuronal_cytosol:Parkin_sub() 6.022000000000001e+22 #original 0.1substance/volume #Parkin_sub #Parkin_sub
	@Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~Parkin_synphilin_1,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0) 7.828600000000001e+23 #original 1.3substance/volume #Parkin_synphilin_1 #Parkin_synphilin_1
	@Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~Parkin_synphilin_1_ub,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0) 1.5055e+24 #original 2.5substance/volume #Parkin_synphilin_1_ub #Parkin_synphilin_1_ub
	@Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~Parkin_sub_ub4,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0) 1.2044000000000002e+23 #original 0.2substance/volume #Parkin_sub_ub4 #Parkin_sub_ub4
	@Neuronal_cytosol:Fragments() 6.022000000000001e+22 #original 0.1substance/volume #Fragments #Fragments
	@Neuronal_cytosol:UCH_L1() 3.011e+23 #original 0.5substance/volume #UCH_L1 #UCH_L1
	@Neuronal_cytosol:L_Dopa() 6.022e+23 #original 1.0substance/volume #L_Dopa #L_Dopa
	@Neuronal_cytosol:DOPAL() 3.0110000000000005e+22 #original 0.05substance/volume #DOPAL #DOPAL
	@Neuronal_cytosol:DOPAC() 1.8066e+23 #original 0.3substance/volume #DOPAC #DOPAC
	@Neuronal_cytosol:GSH() 9.033e+23 #original 1.5substance/volume #GSH #GSH
	@Neuronal_cytosol:GSSG() 9.033e+23 #original 1.5substance/volume #GSSG #GSSG
	@Neuronal_cytosol:Fe2pl() 3.011e+23 #original 0.5substance/volume #Fe2pl #Fe2
	@Neuronal_cytosol:Fe3pl() 3.011e+23 #original 0.5substance/volume #Fe3pl #Fe3
	@Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~UbcH8ub2,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0) 2.1077e+23 #original 0.35substance/volume #UbcH8ub2 #UbcH8ub2
	@Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~UbcH8ub3,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0) 2.1077e+23 #original 0.35substance/volume #UbcH8ub3 #UbcH8ub3
	@Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~UbcH8ub4,asyn_UCH_L1~0,asyn_ub~0) 2.1077e+23 #original 0.35substance/volume #UbcH8ub4 #UbcH8ub4
	@Neuronal_cytosol:UbcH13_Uev1a() 1.2044000000000002e+23 #original 0.2substance/volume #UbcH13_Uev1a #UbcH13_Uev1a
	@Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~UbcH13_Uev1a_ub,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0) 2.1077e+23 #original 0.35substance/volume #UbcH13_Uev1a_ub #UbcH13_Uev1a_ub
	@Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~asyn_UCH_L1,asyn_ub~0) 6.022000000000001e+22 #original 0.1substance/volume #asyn_UCH_L1 #asyn_UCH_L1
	@Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~asyn_ub) 3.0110000000000005e+22 #original 0.05substance/volume #asyn_ub #asyn_ub
	@Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~Protofibril_UCH_L1,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0) 1.5055000000000002e+22 #original 0.025substance/volume #Protofibril_UCH_L1 #Protofibril_UCH_L1
	@Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~Protofibril_Ub,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0) 7.8286e+21 #original 0.013substance/volume #Protofibril_Ub #Protofibril_Ub
	@Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~UCH_L1_asyn_ub4,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0) 6.022000000000001e+22 #original 0.1substance/volume #UCH_L1_asyn_ub4 #UCH_L1_asyn_ub4
	@Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~Hsc70_asyn,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0) 6.022000000000001e+22 #original 0.1substance/volume #Hsc70_asyn #Hsc70_asyn
	@Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~Hsc70_Protofibril,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0) 1.5055000000000002e+22 #original 0.025substance/volume #Hsc70_Protofibril #Hsc70_Protofibril
	@Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~Hsc70_fibril,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0) 7.8286e+21 #original 0.013substance/volume #Hsc70_fibril #Hsc70_fibril
	@Neuronal_cytosol:Hsc70() 3.011e+23 #original 0.5substance/volume #Hsc70 #Hsc70
	@Neuronal_cytosol:DA_GSH(DA_S_parkin~DA_S_parkin,DA_quinone~0) 1.2044000000000002e+23 #original 0.2substance/volume #DA_S_parkin #DA_S_parkin
	@Neuronal_cytosol:O2(O2_~O2_) 1.2044e+22 #original 0.02substance/volume #O2_ #O2
	@Neuronal_cytosol:DA_GSH(DA_S_parkin~0,DA_quinone~0) 1.2044000000000002e+23 #original 0.2substance/volume #DA_GSH #DA_GSH
	@Neuronal_cytosol:Neuromelanin() 6.022e+23 #original 1.0substance/volume #Neuromelanin #Neuromelanin
	@Neuronal_cytosol:V_ntox_ba(Neuromelanin_ntox_Fe3pl~Neuromelanin_ntox_Fe3pl) 3.011e+23 #original 0.5substance/volume #Neuromelanin_ntox_Fe3pl #Neuromelanin_ntox_Fe3
	@Neuronal_cytosol:$Alpha_synuclein() 1.2044000000000002e+23 #original 0.2substance/volume #Alpha_synuclein #Alpha_synuclein
	@Neuronal_cytosol:$Synphilin_1() 3.0110000000000005e+22 #original 0.05substance/volume #Synphilin_1 #Synphilin_1
	@Neuronal_cytosol:$Substrate() 2.4088000000000004e+23 #original 0.4substance/volume #Substrate #Substrate
	@Neuronal_cytosol:$L_Tyr() 3.011e+24 #original 5.0substance/volume #L_Tyr #L_Tyr
	@Neuronal_cytosol:$CO2() 3.011e+23 #original 0.5substance/volume #CO2 #CO2
	@Neuronal_cytosol:$Neurotoxins() 6.022e+21 #original 0.01substance/volume #Neurotoxins #Neurotoxins
	@Neuronal_cytosol:$Bioamines() 6.022000000000001e+22 #original 0.1substance/volume #Bioamines #Bioamines
	@Neuronal_cytosol:$O2(O2_~0) 1.2044e+24 #original 2.0substance/volume #O2 #O2_0
	@Neuronal_cytosol:$NH3() 3.011e+23 #original 0.5substance/volume #NH3 #NH3
	@Neuronal_cytosol:$NADpl() 9.033e+23 #original 1.5substance/volume #NADpl #NAD
	@Neuronal_cytosol:$NADH() 9.033e+23 #original 1.5substance/volume #NADH #NADH
	@Neuronal_cytosol:$H2O() 1.8066e+24 #original 3.0substance/volume #H2O #H2O
	@Neuronal_cytosol:$Preautophagosome_membrane() 6.022e+23 #original 1.0substance/volume #Preautophagosome_membrane #Preautophagosome_membrane
	@Neuronal_cytosol:$Cysteine() 3.011e+23 #original 0.5substance/volume #Cysteine #Cysteine
	@Vesicle:V_DA() 6.022e+24 #original 10.0substance/volume #V_DA #V_DA
	@Vesicle:V_ntox_ba(Neuromelanin_ntox_Fe3pl~0) 1.8066e+23 #original 0.3substance/volume #V_ntox_ba #V_ntox_ba
	@Vesicle:$Vesicle() 6.022e+23 #original 1.0substance/volume #Vesicle #Vesicle_0
	@Autophagosome:Autophagosome() 3.011e+23 #original 0.5substance/volume #Autophagosome #Autophagosome_0
end seed species
begin observables
	Species Protofibril_Neuronal_cytosol @Neuronal_cytosol:Protofibril() #Protofibril
	Species Fibril_Neuronal_cytosol @Neuronal_cytosol:Fibril() #Fibril
	Species Lewy_body_Neuronal_cytosol @Neuronal_cytosol:Lewy_body() #Lewy_body
	Species Dopamine_Neuronal_cytosol @Neuronal_cytosol:Dopamine() #Dopamine
	Species OH__Neuronal_cytosol @Neuronal_cytosol:OH_() #OH-
	Species OH_radical_Neuronal_cytosol @Neuronal_cytosol:OH_radical() #OH_radical
	Species H2O2_Neuronal_cytosol @Neuronal_cytosol:H2O2() #H2O2
	Species DA_quinone_Neuronal_cytosol @Neuronal_cytosol:DA_GSH(DA_S_parkin~0,DA_quinone~DA_quinone) #DA_quinone
	Species Ubiquitin_Neuronal_cytosol @Neuronal_cytosol:Ubiquitin() #Ubiquitin
	Species E1_Neuronal_cytosol @Neuronal_cytosol:E1() #E1
	Species Ub_E1_Neuronal_cytosol @Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0) #Ub-E1
	Species UbcH8_Neuronal_cytosol @Neuronal_cytosol:UbcH8() #UbcH8
	Species UbcH8_Ub_Neuronal_cytosol @Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~UbcH8_Ub,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0) #UbcH8-Ub
	Species Parkin_Neuronal_cytosol @Neuronal_cytosol:Parkin() #Parkin
	Species Parkin_sub_Neuronal_cytosol @Neuronal_cytosol:Parkin_sub() #Parkin-sub
	Species Parkin_synphilin_1_Neuronal_cytosol @Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~Parkin_synphilin_1,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0) #Parkin-synphilin-1
	Species Parkin_synphilin_1_ub_Neuronal_cytosol @Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~Parkin_synphilin_1_ub,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0) #Parkin-synphilin-1-ub
	Species Parkin_sub_ub4_Neuronal_cytosol @Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~Parkin_sub_ub4,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0) #Parkin-sub-ub4
	Species Fragments_Neuronal_cytosol @Neuronal_cytosol:Fragments() #Fragments
	Species UCH_L1_Neuronal_cytosol @Neuronal_cytosol:UCH_L1() #UCH-L1
	Species L_Dopa_Neuronal_cytosol @Neuronal_cytosol:L_Dopa() #L-Dopa
	Species DOPAL_Neuronal_cytosol @Neuronal_cytosol:DOPAL() #DOPAL
	Species DOPAC_Neuronal_cytosol @Neuronal_cytosol:DOPAC() #DOPAC
	Species GSH_Neuronal_cytosol @Neuronal_cytosol:GSH() #GSH
	Species GSSG_Neuronal_cytosol @Neuronal_cytosol:GSSG() #GSSG
	Species Fe2pl_Neuronal_cytosol @Neuronal_cytosol:Fe2pl() #Fe2+
	Species Fe3pl_Neuronal_cytosol @Neuronal_cytosol:Fe3pl() #Fe3+
	Species UbcH8ub2_Neuronal_cytosol @Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~UbcH8ub2,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0) #UbcH8ub2
	Species UbcH8ub3_Neuronal_cytosol @Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~UbcH8ub3,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0) #UbcH8ub3
	Species UbcH8ub4_Neuronal_cytosol @Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~UbcH8ub4,asyn_UCH_L1~0,asyn_ub~0) #UbcH8ub4
	Species UbcH13_Uev1a_Neuronal_cytosol @Neuronal_cytosol:UbcH13_Uev1a() #UbcH13/Uev1a
	Species UbcH13_Uev1a_ub_Neuronal_cytosol @Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~UbcH13_Uev1a_ub,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0) #UbcH13/Uev1a-ub
	Species asyn_UCH_L1_Neuronal_cytosol @Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~asyn_UCH_L1,asyn_ub~0) #asyn-UCH-L1
	Species asyn_ub_Neuronal_cytosol @Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~asyn_ub) #asyn-ub
	Species Protofibril_UCH_L1_Neuronal_cytosol @Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~Protofibril_UCH_L1,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0) #Protofibril-UCH-L1
	Species Protofibril_Ub_Neuronal_cytosol @Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~Protofibril_Ub,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0) #Protofibril-Ub
	Species UCH_L1_asyn_ub4_Neuronal_cytosol @Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~UCH_L1_asyn_ub4,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0) #UCH-L1-asyn-ub4
	Species Hsc70_asyn_Neuronal_cytosol @Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~Hsc70_asyn,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0) #Hsc70-asyn
	Species Hsc70_Protofibril_Neuronal_cytosol @Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~Hsc70_Protofibril,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0) #Hsc70-Protofibril
	Species Hsc70_fibril_Neuronal_cytosol @Neuronal_cytosol:Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~Hsc70_fibril,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0) #Hsc70-fibril
	Species Hsc70_Neuronal_cytosol @Neuronal_cytosol:Hsc70() #Hsc70
	Species DA_S_parkin_Neuronal_cytosol @Neuronal_cytosol:DA_GSH(DA_S_parkin~DA_S_parkin,DA_quinone~0) #DA-S-parkin
	Species O2__Neuronal_cytosol @Neuronal_cytosol:O2(O2_~O2_) #O2-
	Species DA_GSH_Neuronal_cytosol @Neuronal_cytosol:DA_GSH(DA_S_parkin~0,DA_quinone~0) #DA-GSH
	Species Neuromelanin_Neuronal_cytosol @Neuronal_cytosol:Neuromelanin() #Neuromelanin
	Species Neuromelanin_ntox_Fe3pl_Neuronal_cytosol @Neuronal_cytosol:V_ntox_ba(Neuromelanin_ntox_Fe3pl~Neuromelanin_ntox_Fe3pl) #Neuromelanin-ntox-Fe3+
	Species Alpha_synuclein_Neuronal_cytosol @Neuronal_cytosol:Alpha_synuclein() #Alpha_synuclein
	Species Synphilin_1_Neuronal_cytosol @Neuronal_cytosol:Synphilin_1() #Synphilin-1
	Species Substrate_Neuronal_cytosol @Neuronal_cytosol:Substrate() #Substrate
	Species L_Tyr_Neuronal_cytosol @Neuronal_cytosol:L_Tyr() #L-Tyr
	Species CO2_Neuronal_cytosol @Neuronal_cytosol:CO2() #CO2
	Species Neurotoxins_Neuronal_cytosol @Neuronal_cytosol:Neurotoxins() #Neurotoxins
	Species Bioamines_Neuronal_cytosol @Neuronal_cytosol:Bioamines() #Bioamines
	Species O2_Neuronal_cytosol @Neuronal_cytosol:O2(O2_~0) #O2
	Species NH3_Neuronal_cytosol @Neuronal_cytosol:NH3() #NH3
	Species NADpl_Neuronal_cytosol @Neuronal_cytosol:NADpl() #NAD+
	Species NADH_Neuronal_cytosol @Neuronal_cytosol:NADH() #NADH
	Species H2O_Neuronal_cytosol @Neuronal_cytosol:H2O() #H2O
	Species Preautophagosome_membrane_Neuronal_cytosol @Neuronal_cytosol:Preautophagosome_membrane() #Preautophagosome_membrane
	Species Cysteine_Neuronal_cytosol @Neuronal_cytosol:Cysteine() #Cysteine
	Species V_DA_Vesicle @Vesicle:V_DA() #V-DA
	Species V_ntox_ba_Vesicle @Vesicle:V_ntox_ba(Neuromelanin_ntox_Fe3pl~0) #V-ntox-ba
	Species Vesicle_Vesicle @Vesicle:Vesicle() #Vesicle
	Species Autophagosome_Autophagosome @Autophagosome:Autophagosome() #Autophagosome
end observables
begin functions
	arRateFe2() = -J20 + J21 + 0.01
	k48_0() = 0.0003*DA_quinone_Neuronal_cytosol*i4810 + 0.0003*H2O2_Neuronal_cytosol*i489 + 0.0003*O2__Neuronal_cytosol*i4886 + 0.0003*OH_radical_Neuronal_cytosol*i488
	k47_0() = 0.0003*DA_quinone_Neuronal_cytosol*i4710 + 0.0003*H2O2_Neuronal_cytosol*i479 + 0.0003*O2__Neuronal_cytosol*i4786 + 0.0003*OH_radical_Neuronal_cytosol*i478
	k46_0() = 0.0003*DA_quinone_Neuronal_cytosol*i4610 + 0.0003*H2O2_Neuronal_cytosol*i469 + 0.0003*O2__Neuronal_cytosol*i4686 + 0.0003*OH_radical_Neuronal_cytosol*i468
	k38_0() = 0.007*Alpha_synuclein_Neuronal_cytosol*i381 + 0.007*Fibril_Neuronal_cytosol*i383 + 0.007*Protofibril_Neuronal_cytosol*i382
	k36_0() = 0.0005*DA_quinone_Neuronal_cytosol*i3610 + 0.0005*H2O2_Neuronal_cytosol*i369 + 0.0005*O2__Neuronal_cytosol*i3686 + 0.0005*OH_radical_Neuronal_cytosol*i368
	k35_0() = 1.0e-5*DA_quinone_Neuronal_cytosol*p3510 + 1.0e-5*H2O2_Neuronal_cytosol*p359 + 1.0e-5*O2__Neuronal_cytosol*p3586 + 1.0e-5*OH_radical_Neuronal_cytosol*p358
	k32_0() = 1.0e-5*DA_quinone_Neuronal_cytosol*p3210 + 1.0e-5*H2O2_Neuronal_cytosol*p329 + 1.0e-5*O2__Neuronal_cytosol*p3286 + 1.0e-5*OH_radical_Neuronal_cytosol*p328
	k15_0() = 0.002*Protofibril_Neuronal_cytosol*i152
	k13_0() = 0.001*Alpha_synuclein_Neuronal_cytosol*i131 + 0.001*DA_quinone_Neuronal_cytosol*i1310
	k4_0() = 0.009*Alpha_synuclein_Neuronal_cytosol*i41 + 0.009*Fibril_Neuronal_cytosol*i43 + 0.009*Protofibril_Neuronal_cytosol*i42
	k2_0() = 0.0001*DA_quinone_Neuronal_cytosol*p210 + 0.0001*Dopamine_Neuronal_cytosol*i26 + 0.0001*H2O2_Neuronal_cytosol*p29 + 0.0001*O2__Neuronal_cytosol*p286 + 0.0001*OH_radical_Neuronal_cytosol*p28
	k1_0() = 0.0003*DA_quinone_Neuronal_cytosol*p110 + 0.0003*H2O2_Neuronal_cytosol*p19 + 0.0003*O2__Neuronal_cytosol*p186 + 0.0003*OH_radical_Neuronal_cytosol*p18
	fRate0() = Alpha_synuclein_Neuronal_cytosol^g11*k1
	fRate1() = Protofibril_Neuronal_cytosol^g22*k2
	fRate2() = Fibril_Neuronal_cytosol^g23*Parkin_synphilin_1_ub_Neuronal_cytosol^g326*k3
	fRate3() = ATP_Neuronal_cytosol^g415*Parkin_sub_ub4_Neuronal_cytosol^g427*Proteasome_Proteasome^g412*UCH_L1_Neuronal_cytosol^g430*k4
	fRate4() = ATP_Neuronal_cytosol^g615*E1_Neuronal_cytosol^g614*Ubiquitin_Neuronal_cytosol^g613*k6
	fRate5() = ATP_Neuronal_cytosol^g715*Ub_E1_Neuronal_cytosol^g716*UbcH8_Neuronal_cytosol^g717*k7
	fRate6() = Parkin_Neuronal_cytosol^g819*Substrate_Neuronal_cytosol^g821*k8
	fRate7() = Parkin_Neuronal_cytosol^g919*Synphilin_1_Neuronal_cytosol^g920*k9
	fRate8() = Parkin_synphilin_1_Neuronal_cytosol^g1025*UbcH13_Uev1a_ub_Neuronal_cytosol^g1072*k10
	fRate9() = Parkin_sub_Neuronal_cytosol^g1124*UbcH8ub4_Neuronal_cytosol^g1170*k11
	fRate10() = L_Tyr_Neuronal_cytosol^g1336*O2_Neuronal_cytosol^g1351*TH_Neuronal_cytosol^g1335*k13
	fRate11() = DDC_Neuronal_cytosol^g1467*L_Dopa_Neuronal_cytosol^g1437*k14
	fRate12() = Dopamine_Neuronal_cytosol^g156*VMAT2_Neuronal_cytosol^g1545*Vesicle_Vesicle^g1544*k15
	fRate13() = Bioamines_Neuronal_cytosol^g1643*Vesicle_Vesicle^g1644*k16
	fRate14() = Neurotoxins_Neuronal_cytosol^g1742*Vesicle_Vesicle^g1744*k17
	fRate15() = Dopamine_Neuronal_cytosol^g186*O2_Neuronal_cytosol^g1851*k18
	fRate16() = Dopamine_Neuronal_cytosol^g196*H2O_Neuronal_cytosol^g1960*MAO_Neuronal_cytosol^g1953*O2_Neuronal_cytosol^g1951*k19
	fRate17() = Fe2pl_Neuronal_cytosol^g2065*H2O2_Neuronal_cytosol^g209*k20
	fRate18() = Fe3pl_Neuronal_cytosol^g2166*k21
	fRate19() = Catalase_Neuronal_cytosol^g2259*H2O2_Neuronal_cytosol^g229*k22
	fRate20() = GSH_Neuronal_cytosol^g2362*Gluta_per_Neuronal_cytosol^g2361*H2O2_Neuronal_cytosol^g239*k23
	fRate21() = GSSG_Neuronal_cytosol^g2463*Gluta_red_Neuronal_cytosol^g2464*k24
	fRate22() = ALDH_Neuronal_cytosol^g2555*DOPAL_Neuronal_cytosol^g2552*NADpl_Neuronal_cytosol^g2556*k25
	fRate23() = ATP_Neuronal_cytosol^g26f15*Ub_E1_Neuronal_cytosol^g26f16*UbcH8_Ub_Neuronal_cytosol^g26f18*k26f
	fRate24() = UCH_L1_Neuronal_cytosol^g26r30*UbcH8ub2_Neuronal_cytosol^g26r68*k26r
	fRate25() = ATP_Neuronal_cytosol^g27f15*Ub_E1_Neuronal_cytosol^g27f16*UbcH8ub2_Neuronal_cytosol^g27f68*k27f
	fRate26() = UCH_L1_Neuronal_cytosol^g27r30*UbcH8ub3_Neuronal_cytosol^g27r69*k27r
	fRate27() = ATP_Neuronal_cytosol^g28f15*Ub_E1_Neuronal_cytosol^g28f16*UbcH8ub3_Neuronal_cytosol^g28f69*k28f
	fRate28() = UCH_L1_Neuronal_cytosol^g28r30*UbcH8ub4_Neuronal_cytosol^g28r70*k28r
	fRate29() = ATP_Neuronal_cytosol^g2915*Ub_E1_Neuronal_cytosol^g2916*UbcH13_Uev1a_Neuronal_cytosol^g2971*k29
	fRate30() = Alpha_synuclein_Neuronal_cytosol^g301*UCH_L1_Neuronal_cytosol^g3030*k30
	fRate31() = UbcH13_Uev1a_ub_Neuronal_cytosol^g3172*asyn_UCH_L1_Neuronal_cytosol^g3173*k31
	fRate32() = Alpha_synuclein_Neuronal_cytosol^g321*asyn_ub_Neuronal_cytosol^g3274*k32
	fRate33() = Protofibril_Neuronal_cytosol^g332*UCH_L1_Neuronal_cytosol^g3330*k33
	fRate34() = Protofibril_UCH_L1_Neuronal_cytosol^g3475*UbcH13_Uev1a_ub_Neuronal_cytosol^g3472*k34
	fRate35() = Protofibril_Neuronal_cytosol^g352*Protofibril_Ub_Neuronal_cytosol^g3576*k35
	fRate36() = Autophagosome_Autophagosome^g3679*Lysosome_Lysosome^g3677*k36
	fRate37() = UbcH8ub4_Neuronal_cytosol^g3770*asyn_UCH_L1_Neuronal_cytosol^g3773*k37
	fRate38() = ATP_Neuronal_cytosol^g3815*Proteasome_Proteasome^g3812*UCH_L1_Neuronal_cytosol^g3830*UCH_L1_asyn_ub4_Neuronal_cytosol^g3878*k38
	fRate39() = Alpha_synuclein_Neuronal_cytosol^g431*Hsc70_Neuronal_cytosol^g4384*k43
	fRate40() = Hsc70_Neuronal_cytosol^g4484*Protofibril_Neuronal_cytosol^g442*k44
	fRate41() = Fibril_Neuronal_cytosol^g453*Hsc70_Neuronal_cytosol^g4584*k45
	fRate42() = Hsc70_asyn_Neuronal_cytosol^g4681*Lysosome_Lysosome^g4677*k46
	fRate43() = Hsc70_Protofibril_Neuronal_cytosol^g4782*Lysosome_Lysosome^g4777*k47
	fRate44() = Hsc70_fibril_Neuronal_cytosol^g4883*Lysosome_Lysosome^g4877*k48
	fRate45() = Alpha_synuclein_Neuronal_cytosol^g501*Preautophagosome_membrane_Neuronal_cytosol^g5080*k50
	fRate46() = Preautophagosome_membrane_Neuronal_cytosol^g5180*Protofibril_Neuronal_cytosol^g512*k51
	fRate47() = Fibril_Neuronal_cytosol^g523*Preautophagosome_membrane_Neuronal_cytosol^g5280*k52
	fRate48() = Lewy_body_Neuronal_cytosol^g534*Preautophagosome_membrane_Neuronal_cytosol^g5380*k53
	fRate49() = DA_quinone_Neuronal_cytosol^g5410*Parkin_Neuronal_cytosol^g5419*k54
	fRate50() = Dopamine_Neuronal_cytosol^g556*O2__Neuronal_cytosol^g5586*k55
	fRate51() = O2__Neuronal_cytosol^g5686*SOD_Neuronal_cytosol^g5687*k56
	fRate52() = DA_quinone_Neuronal_cytosol^g5710*GSH_Neuronal_cytosol^g5762*k57
	fRate53() = Cysteine_Neuronal_cytosol^g100115*L_Dopa_Neuronal_cytosol^g10037*O2_Neuronal_cytosol^g10051*k100
	fRate54() = Cysteine_Neuronal_cytosol^g101115*L_Tyr_Neuronal_cytosol^g10136*O2_Neuronal_cytosol^g10151*k101
	fRate55() = Cysteine_Neuronal_cytosol^g102115*DA_quinone_Neuronal_cytosol^g10210*O2_Neuronal_cytosol^g10251*k102
	fRate56() = Fe3pl_Neuronal_cytosol^g11565*Neuromelanin_Neuronal_cytosol^g115118*k115
	fRate57() = Neuromelanin_Neuronal_cytosol^g116118*Neurotoxins_Neuronal_cytosol^g11642*k116
end functions
begin reaction rules
	J1_reactants_0: 0  -> Alpha_synuclein()@Neuronal_cytosol -1*(fRate0()) #Modifiers(Alpha_synuclein, Alpha_synuclein, Alpha_synuclein, Alpha_synuclein, Alpha_synuclein, Alpha_synuclein, Alpha_synuclein, Alpha_synuclein, Alpha_synuclein)
	J1_products_0: 0  -> Protofibril()@Neuronal_cytosol fRate0() #Modifiers(Alpha_synuclein, Alpha_synuclein, Alpha_synuclein, Alpha_synuclein, Alpha_synuclein, Alpha_synuclein, Alpha_synuclein, Alpha_synuclein, Alpha_synuclein)
	J2_reactants_0: 0  -> Protofibril()@Neuronal_cytosol -1*(fRate1()) #Modifiers(Protofibril, Protofibril, Protofibril, Protofibril, Protofibril, Protofibril, Protofibril, Protofibril, Protofibril)
	J2_products_0: 0  -> Fibril()@Neuronal_cytosol fRate1() #Modifiers(Protofibril, Protofibril, Protofibril, Protofibril, Protofibril, Protofibril, Protofibril, Protofibril, Protofibril)
	J3_reactants_0: 0  -> Fibril()@Neuronal_cytosol -1*(fRate2()) #Modifiers(Fibril, Parkin_synphilin_1_ub, Fibril, Parkin_synphilin_1_ub, Fibril, Parkin_synphilin_1_ub, Fibril, Parkin_synphilin_1_ub, Fibril, Parkin_synphilin_1_ub, Fibril, Parkin_synphilin_1_ub, Fibril, Parkin_synphilin_1_ub, Fibril, Parkin_synphilin_1_ub, Fibril, Parkin_synphilin_1_ub)
	J3_reactants_1: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~Parkin_synphilin_1_ub,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol -1*(fRate2()) #Modifiers(Fibril, Parkin_synphilin_1_ub, Fibril, Parkin_synphilin_1_ub, Fibril, Parkin_synphilin_1_ub, Fibril, Parkin_synphilin_1_ub, Fibril, Parkin_synphilin_1_ub, Fibril, Parkin_synphilin_1_ub, Fibril, Parkin_synphilin_1_ub, Fibril, Parkin_synphilin_1_ub, Fibril, Parkin_synphilin_1_ub)
	J3_products_0: 0  -> Lewy_body()@Neuronal_cytosol fRate2() #Modifiers(Fibril, Parkin_synphilin_1_ub, Fibril, Parkin_synphilin_1_ub, Fibril, Parkin_synphilin_1_ub, Fibril, Parkin_synphilin_1_ub, Fibril, Parkin_synphilin_1_ub, Fibril, Parkin_synphilin_1_ub, Fibril, Parkin_synphilin_1_ub, Fibril, Parkin_synphilin_1_ub, Fibril, Parkin_synphilin_1_ub)
	J4_reactants_0: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~Parkin_sub_ub4,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol -1*(fRate3()) #Modifiers(Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1)
	J4_products_0: 0  -> Parkin()@Neuronal_cytosol fRate3() #Modifiers(Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1)
	J4_products_1: 0  -> Fragments()@Neuronal_cytosol fRate3() #Modifiers(Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1)
	J4_products_2: 0  -> Ubiquitin()@Neuronal_cytosol 4.0*fRate3() #Modifiers(Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1, Parkin_sub_ub4, Proteasome_0, ATP, UCH_L1)
	J6_reactants_0: 0  -> Ubiquitin()@Neuronal_cytosol -1*(fRate4()) #Modifiers(ATP, Ubiquitin, E1, ATP, Ubiquitin, E1, ATP, Ubiquitin, E1, ATP, Ubiquitin, E1, ATP, Ubiquitin, E1, ATP, Ubiquitin, E1, ATP, Ubiquitin, E1, ATP, Ubiquitin, E1, ATP, Ubiquitin, E1, ATP)
	J6_reactants_1: 0  -> E1()@Neuronal_cytosol -1*(fRate4()) #Modifiers(ATP, Ubiquitin, E1, ATP, Ubiquitin, E1, ATP, Ubiquitin, E1, ATP, Ubiquitin, E1, ATP, Ubiquitin, E1, ATP, Ubiquitin, E1, ATP, Ubiquitin, E1, ATP, Ubiquitin, E1, ATP, Ubiquitin, E1, ATP)
	J6_products_0: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol fRate4() #Modifiers(ATP, Ubiquitin, E1, ATP, Ubiquitin, E1, ATP, Ubiquitin, E1, ATP, Ubiquitin, E1, ATP, Ubiquitin, E1, ATP, Ubiquitin, E1, ATP, Ubiquitin, E1, ATP, Ubiquitin, E1, ATP, Ubiquitin, E1, ATP)
	J7_reactants_0: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol -1*(fRate5()) #Modifiers(ATP, Ub_E1, UbcH8, ATP, Ub_E1, UbcH8, ATP, Ub_E1, UbcH8, ATP, Ub_E1, UbcH8, ATP, Ub_E1, UbcH8, ATP, Ub_E1, UbcH8, ATP, Ub_E1, UbcH8, ATP, Ub_E1, UbcH8, ATP, Ub_E1, UbcH8, ATP)
	J7_reactants_1: 0  -> UbcH8()@Neuronal_cytosol -1*(fRate5()) #Modifiers(ATP, Ub_E1, UbcH8, ATP, Ub_E1, UbcH8, ATP, Ub_E1, UbcH8, ATP, Ub_E1, UbcH8, ATP, Ub_E1, UbcH8, ATP, Ub_E1, UbcH8, ATP, Ub_E1, UbcH8, ATP, Ub_E1, UbcH8, ATP, Ub_E1, UbcH8, ATP)
	J7_products_0: 0  -> E1()@Neuronal_cytosol fRate5() #Modifiers(ATP, Ub_E1, UbcH8, ATP, Ub_E1, UbcH8, ATP, Ub_E1, UbcH8, ATP, Ub_E1, UbcH8, ATP, Ub_E1, UbcH8, ATP, Ub_E1, UbcH8, ATP, Ub_E1, UbcH8, ATP, Ub_E1, UbcH8, ATP, Ub_E1, UbcH8, ATP)
	J7_products_1: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~UbcH8_Ub,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol fRate5() #Modifiers(ATP, Ub_E1, UbcH8, ATP, Ub_E1, UbcH8, ATP, Ub_E1, UbcH8, ATP, Ub_E1, UbcH8, ATP, Ub_E1, UbcH8, ATP, Ub_E1, UbcH8, ATP, Ub_E1, UbcH8, ATP, Ub_E1, UbcH8, ATP, Ub_E1, UbcH8, ATP)
	J8_reactants_0: 0  -> Parkin()@Neuronal_cytosol -1*(fRate6()) #Modifiers(Parkin, Substrate, Parkin, Substrate, Parkin, Substrate, Parkin, Substrate, Parkin, Substrate, Parkin, Substrate, Parkin, Substrate, Parkin, Substrate, Parkin, Substrate)
	J8_reactants_1: 0  -> Substrate()@Neuronal_cytosol -1*(fRate6()) #Modifiers(Parkin, Substrate, Parkin, Substrate, Parkin, Substrate, Parkin, Substrate, Parkin, Substrate, Parkin, Substrate, Parkin, Substrate, Parkin, Substrate, Parkin, Substrate)
	J8_products_0: 0  -> Parkin_sub()@Neuronal_cytosol fRate6() #Modifiers(Parkin, Substrate, Parkin, Substrate, Parkin, Substrate, Parkin, Substrate, Parkin, Substrate, Parkin, Substrate, Parkin, Substrate, Parkin, Substrate, Parkin, Substrate)
	J9_reactants_0: 0  -> Parkin()@Neuronal_cytosol -1*(fRate7()) #Modifiers(Parkin, Synphilin_1, Parkin, Synphilin_1, Parkin, Synphilin_1, Parkin, Synphilin_1, Parkin, Synphilin_1, Parkin, Synphilin_1, Parkin, Synphilin_1, Parkin, Synphilin_1, Parkin, Synphilin_1)
	J9_reactants_1: 0  -> Synphilin_1()@Neuronal_cytosol -1*(fRate7()) #Modifiers(Parkin, Synphilin_1, Parkin, Synphilin_1, Parkin, Synphilin_1, Parkin, Synphilin_1, Parkin, Synphilin_1, Parkin, Synphilin_1, Parkin, Synphilin_1, Parkin, Synphilin_1, Parkin, Synphilin_1)
	J9_products_0: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~Parkin_synphilin_1,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol fRate7() #Modifiers(Parkin, Synphilin_1, Parkin, Synphilin_1, Parkin, Synphilin_1, Parkin, Synphilin_1, Parkin, Synphilin_1, Parkin, Synphilin_1, Parkin, Synphilin_1, Parkin, Synphilin_1, Parkin, Synphilin_1)
	J10_reactants_0: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~Parkin_synphilin_1,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol -1*(fRate8()) #Modifiers(Parkin_synphilin_1, UbcH13_Uev1a_ub, Parkin_synphilin_1, UbcH13_Uev1a_ub, Parkin_synphilin_1, UbcH13_Uev1a_ub, Parkin_synphilin_1, UbcH13_Uev1a_ub, Parkin_synphilin_1, UbcH13_Uev1a_ub, Parkin_synphilin_1, UbcH13_Uev1a_ub, Parkin_synphilin_1, UbcH13_Uev1a_ub, Parkin_synphilin_1, UbcH13_Uev1a_ub, Parkin_synphilin_1, UbcH13_Uev1a_ub)
	J10_reactants_1: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~UbcH13_Uev1a_ub,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol -1*(fRate8()) #Modifiers(Parkin_synphilin_1, UbcH13_Uev1a_ub, Parkin_synphilin_1, UbcH13_Uev1a_ub, Parkin_synphilin_1, UbcH13_Uev1a_ub, Parkin_synphilin_1, UbcH13_Uev1a_ub, Parkin_synphilin_1, UbcH13_Uev1a_ub, Parkin_synphilin_1, UbcH13_Uev1a_ub, Parkin_synphilin_1, UbcH13_Uev1a_ub, Parkin_synphilin_1, UbcH13_Uev1a_ub, Parkin_synphilin_1, UbcH13_Uev1a_ub)
	J10_products_0: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~Parkin_synphilin_1_ub,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol fRate8() #Modifiers(Parkin_synphilin_1, UbcH13_Uev1a_ub, Parkin_synphilin_1, UbcH13_Uev1a_ub, Parkin_synphilin_1, UbcH13_Uev1a_ub, Parkin_synphilin_1, UbcH13_Uev1a_ub, Parkin_synphilin_1, UbcH13_Uev1a_ub, Parkin_synphilin_1, UbcH13_Uev1a_ub, Parkin_synphilin_1, UbcH13_Uev1a_ub, Parkin_synphilin_1, UbcH13_Uev1a_ub, Parkin_synphilin_1, UbcH13_Uev1a_ub)
	J10_products_1: 0  -> UbcH13_Uev1a()@Neuronal_cytosol fRate8() #Modifiers(Parkin_synphilin_1, UbcH13_Uev1a_ub, Parkin_synphilin_1, UbcH13_Uev1a_ub, Parkin_synphilin_1, UbcH13_Uev1a_ub, Parkin_synphilin_1, UbcH13_Uev1a_ub, Parkin_synphilin_1, UbcH13_Uev1a_ub, Parkin_synphilin_1, UbcH13_Uev1a_ub, Parkin_synphilin_1, UbcH13_Uev1a_ub, Parkin_synphilin_1, UbcH13_Uev1a_ub, Parkin_synphilin_1, UbcH13_Uev1a_ub)
	J11_reactants_0: 0  -> Parkin_sub()@Neuronal_cytosol -1*(fRate9()) #Modifiers(Parkin_sub, UbcH8ub4, Parkin_sub, UbcH8ub4, Parkin_sub, UbcH8ub4, Parkin_sub, UbcH8ub4, Parkin_sub, UbcH8ub4, Parkin_sub, UbcH8ub4, Parkin_sub, UbcH8ub4, Parkin_sub, UbcH8ub4, Parkin_sub, UbcH8ub4)
	J11_reactants_1: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~UbcH8ub4,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol -1*(fRate9()) #Modifiers(Parkin_sub, UbcH8ub4, Parkin_sub, UbcH8ub4, Parkin_sub, UbcH8ub4, Parkin_sub, UbcH8ub4, Parkin_sub, UbcH8ub4, Parkin_sub, UbcH8ub4, Parkin_sub, UbcH8ub4, Parkin_sub, UbcH8ub4, Parkin_sub, UbcH8ub4)
	J11_products_0: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~Parkin_sub_ub4,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol fRate9() #Modifiers(Parkin_sub, UbcH8ub4, Parkin_sub, UbcH8ub4, Parkin_sub, UbcH8ub4, Parkin_sub, UbcH8ub4, Parkin_sub, UbcH8ub4, Parkin_sub, UbcH8ub4, Parkin_sub, UbcH8ub4, Parkin_sub, UbcH8ub4, Parkin_sub, UbcH8ub4)
	J11_products_1: 0  -> UbcH8()@Neuronal_cytosol fRate9() #Modifiers(Parkin_sub, UbcH8ub4, Parkin_sub, UbcH8ub4, Parkin_sub, UbcH8ub4, Parkin_sub, UbcH8ub4, Parkin_sub, UbcH8ub4, Parkin_sub, UbcH8ub4, Parkin_sub, UbcH8ub4, Parkin_sub, UbcH8ub4, Parkin_sub, UbcH8ub4)
	J13_reactants_0: 0  -> L_Tyr()@Neuronal_cytosol -1*(fRate10()) #Modifiers(TH, L_Tyr, O2_0, TH, L_Tyr, O2_0, TH, L_Tyr, O2_0, TH, L_Tyr, O2_0, TH, L_Tyr, O2_0, TH, L_Tyr, O2_0, TH, L_Tyr, O2_0, TH, L_Tyr, O2_0, TH, L_Tyr, O2_0, TH)
	J13_reactants_1: 0  -> O2(O2_~0)@Neuronal_cytosol -1*(fRate10()) #Modifiers(TH, L_Tyr, O2_0, TH, L_Tyr, O2_0, TH, L_Tyr, O2_0, TH, L_Tyr, O2_0, TH, L_Tyr, O2_0, TH, L_Tyr, O2_0, TH, L_Tyr, O2_0, TH, L_Tyr, O2_0, TH, L_Tyr, O2_0, TH)
	J13_products_0: 0  -> L_Dopa()@Neuronal_cytosol fRate10() #Modifiers(TH, L_Tyr, O2_0, TH, L_Tyr, O2_0, TH, L_Tyr, O2_0, TH, L_Tyr, O2_0, TH, L_Tyr, O2_0, TH, L_Tyr, O2_0, TH, L_Tyr, O2_0, TH, L_Tyr, O2_0, TH, L_Tyr, O2_0, TH)
	J14_reactants_0: 0  -> L_Dopa()@Neuronal_cytosol -1*(fRate11()) #Modifiers(DDC, L_Dopa, DDC, L_Dopa, DDC, L_Dopa, DDC, L_Dopa, DDC, L_Dopa, DDC, L_Dopa, DDC, L_Dopa, DDC, L_Dopa, DDC, L_Dopa, DDC)
	J14_products_0: 0  -> Dopamine()@Neuronal_cytosol fRate11() #Modifiers(DDC, L_Dopa, DDC, L_Dopa, DDC, L_Dopa, DDC, L_Dopa, DDC, L_Dopa, DDC, L_Dopa, DDC, L_Dopa, DDC, L_Dopa, DDC, L_Dopa, DDC)
	J14_products_1: 0  -> CO2()@Neuronal_cytosol fRate11() #Modifiers(DDC, L_Dopa, DDC, L_Dopa, DDC, L_Dopa, DDC, L_Dopa, DDC, L_Dopa, DDC, L_Dopa, DDC, L_Dopa, DDC, L_Dopa, DDC, L_Dopa, DDC)
	J15_reactants_0: 0  -> Dopamine()@Neuronal_cytosol -1*(fRate12()) #Modifiers(VMAT2, Dopamine, Vesicle_0, VMAT2, Dopamine, Vesicle_0, VMAT2, Dopamine, Vesicle_0, VMAT2, Dopamine, Vesicle_0, VMAT2, Dopamine, Vesicle_0, VMAT2, Dopamine, Vesicle_0, VMAT2, Dopamine, Vesicle_0, VMAT2, Dopamine, Vesicle_0, VMAT2, Dopamine, Vesicle_0, VMAT2)
	J15_reactants_1: 0  -> Vesicle()@Vesicle -1*(fRate12()) #Modifiers(VMAT2, Dopamine, Vesicle_0, VMAT2, Dopamine, Vesicle_0, VMAT2, Dopamine, Vesicle_0, VMAT2, Dopamine, Vesicle_0, VMAT2, Dopamine, Vesicle_0, VMAT2, Dopamine, Vesicle_0, VMAT2, Dopamine, Vesicle_0, VMAT2, Dopamine, Vesicle_0, VMAT2, Dopamine, Vesicle_0, VMAT2)
	J15_products_0: 0  -> V_DA()@Vesicle fRate12() #Modifiers(VMAT2, Dopamine, Vesicle_0, VMAT2, Dopamine, Vesicle_0, VMAT2, Dopamine, Vesicle_0, VMAT2, Dopamine, Vesicle_0, VMAT2, Dopamine, Vesicle_0, VMAT2, Dopamine, Vesicle_0, VMAT2, Dopamine, Vesicle_0, VMAT2, Dopamine, Vesicle_0, VMAT2, Dopamine, Vesicle_0, VMAT2)
	J16_reactants_0: 0  -> Bioamines()@Neuronal_cytosol -1*(fRate13()) #Modifiers(Bioamines, Vesicle_0, Bioamines, Vesicle_0, Bioamines, Vesicle_0, Bioamines, Vesicle_0, Bioamines, Vesicle_0, Bioamines, Vesicle_0, Bioamines, Vesicle_0, Bioamines, Vesicle_0, Bioamines, Vesicle_0)
	J16_reactants_1: 0  -> Vesicle()@Vesicle -1*(fRate13()) #Modifiers(Bioamines, Vesicle_0, Bioamines, Vesicle_0, Bioamines, Vesicle_0, Bioamines, Vesicle_0, Bioamines, Vesicle_0, Bioamines, Vesicle_0, Bioamines, Vesicle_0, Bioamines, Vesicle_0, Bioamines, Vesicle_0)
	J16_products_0: 0  -> V_ntox_ba(Neuromelanin_ntox_Fe3pl~0)@Vesicle fRate13() #Modifiers(Bioamines, Vesicle_0, Bioamines, Vesicle_0, Bioamines, Vesicle_0, Bioamines, Vesicle_0, Bioamines, Vesicle_0, Bioamines, Vesicle_0, Bioamines, Vesicle_0, Bioamines, Vesicle_0, Bioamines, Vesicle_0)
	J17_reactants_0: 0  -> Neurotoxins()@Neuronal_cytosol -1*(fRate14()) #Modifiers(Neurotoxins, Vesicle_0, Neurotoxins, Vesicle_0, Neurotoxins, Vesicle_0, Neurotoxins, Vesicle_0, Neurotoxins, Vesicle_0, Neurotoxins, Vesicle_0, Neurotoxins, Vesicle_0, Neurotoxins, Vesicle_0, Neurotoxins, Vesicle_0)
	J17_reactants_1: 0  -> Vesicle()@Vesicle -1*(fRate14()) #Modifiers(Neurotoxins, Vesicle_0, Neurotoxins, Vesicle_0, Neurotoxins, Vesicle_0, Neurotoxins, Vesicle_0, Neurotoxins, Vesicle_0, Neurotoxins, Vesicle_0, Neurotoxins, Vesicle_0, Neurotoxins, Vesicle_0, Neurotoxins, Vesicle_0)
	J17_products_0: 0  -> V_ntox_ba(Neuromelanin_ntox_Fe3pl~0)@Vesicle fRate14() #Modifiers(Neurotoxins, Vesicle_0, Neurotoxins, Vesicle_0, Neurotoxins, Vesicle_0, Neurotoxins, Vesicle_0, Neurotoxins, Vesicle_0, Neurotoxins, Vesicle_0, Neurotoxins, Vesicle_0, Neurotoxins, Vesicle_0, Neurotoxins, Vesicle_0)
	J18_reactants_0: 0  -> Dopamine()@Neuronal_cytosol -1*(fRate15()) #Modifiers(Dopamine, O2_0, Dopamine, O2_0, Dopamine, O2_0, Dopamine, O2_0, Dopamine, O2_0, Dopamine, O2_0, Dopamine, O2_0, Dopamine, O2_0, Dopamine, O2_0)
	J18_reactants_1: 0  -> O2(O2_~0)@Neuronal_cytosol -1*(fRate15()) #Modifiers(Dopamine, O2_0, Dopamine, O2_0, Dopamine, O2_0, Dopamine, O2_0, Dopamine, O2_0, Dopamine, O2_0, Dopamine, O2_0, Dopamine, O2_0, Dopamine, O2_0)
	J18_products_0: 0  -> DA_GSH(DA_S_parkin~0,DA_quinone~DA_quinone)@Neuronal_cytosol fRate15() #Modifiers(Dopamine, O2_0, Dopamine, O2_0, Dopamine, O2_0, Dopamine, O2_0, Dopamine, O2_0, Dopamine, O2_0, Dopamine, O2_0, Dopamine, O2_0, Dopamine, O2_0)
	J18_products_1: 0  -> O2(O2_~O2_)@Neuronal_cytosol fRate15() #Modifiers(Dopamine, O2_0, Dopamine, O2_0, Dopamine, O2_0, Dopamine, O2_0, Dopamine, O2_0, Dopamine, O2_0, Dopamine, O2_0, Dopamine, O2_0, Dopamine, O2_0)
	J19_reactants_0: 0  -> Dopamine()@Neuronal_cytosol -1*(fRate16()) #Modifiers(MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO)
	J19_reactants_1: 0  -> O2(O2_~0)@Neuronal_cytosol -1*(fRate16()) #Modifiers(MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO)
	J19_reactants_2: 0  -> H2O()@Neuronal_cytosol -1*(fRate16()) #Modifiers(MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO)
	J19_products_0: 0  -> NH3()@Neuronal_cytosol fRate16() #Modifiers(MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO)
	J19_products_1: 0  -> DOPAL()@Neuronal_cytosol fRate16() #Modifiers(MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO)
	J19_products_2: 0  -> H2O2()@Neuronal_cytosol fRate16() #Modifiers(MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO, Dopamine, O2_0, H2O, MAO)
	J20_reactants_0: 0  -> H2O2()@Neuronal_cytosol -1*(fRate17()) #Modifiers(H2O2, Fe2, H2O2, Fe2, H2O2, Fe2, H2O2, Fe2, H2O2, Fe2, H2O2, Fe2, H2O2, Fe2, H2O2, Fe2, H2O2, Fe2)
	J20_reactants_1: 0  -> Fe2pl()@Neuronal_cytosol -1*(fRate17()) #Modifiers(H2O2, Fe2, H2O2, Fe2, H2O2, Fe2, H2O2, Fe2, H2O2, Fe2, H2O2, Fe2, H2O2, Fe2, H2O2, Fe2, H2O2, Fe2)
	J20_products_0: 0  -> Fe3pl()@Neuronal_cytosol fRate17() #Modifiers(H2O2, Fe2, H2O2, Fe2, H2O2, Fe2, H2O2, Fe2, H2O2, Fe2, H2O2, Fe2, H2O2, Fe2, H2O2, Fe2, H2O2, Fe2)
	J20_products_1: 0  -> OH_radical()@Neuronal_cytosol fRate17() #Modifiers(H2O2, Fe2, H2O2, Fe2, H2O2, Fe2, H2O2, Fe2, H2O2, Fe2, H2O2, Fe2, H2O2, Fe2, H2O2, Fe2, H2O2, Fe2)
	J20_products_2: 0  -> OH_()@Neuronal_cytosol fRate17() #Modifiers(H2O2, Fe2, H2O2, Fe2, H2O2, Fe2, H2O2, Fe2, H2O2, Fe2, H2O2, Fe2, H2O2, Fe2, H2O2, Fe2, H2O2, Fe2)
	J21_reactants_0: 0  -> Fe3pl()@Neuronal_cytosol -1*(fRate18()) #Modifiers(Fe3, Fe3, Fe3, Fe3, Fe3, Fe3, Fe3, Fe3, Fe3)
	J21_products_0: 0  -> Fe2pl()@Neuronal_cytosol fRate18() #Modifiers(Fe3, Fe3, Fe3, Fe3, Fe3, Fe3, Fe3, Fe3, Fe3)
	J22_reactants_0: 0  -> H2O2()@Neuronal_cytosol -1*(fRate19()) #Modifiers(Catalase, H2O2, Catalase, H2O2, Catalase, H2O2, Catalase, H2O2, Catalase, H2O2, Catalase, H2O2, Catalase, H2O2, Catalase, H2O2, Catalase, H2O2, Catalase)
	J22_products_0: 0  -> H2O()@Neuronal_cytosol fRate19() #Modifiers(Catalase, H2O2, Catalase, H2O2, Catalase, H2O2, Catalase, H2O2, Catalase, H2O2, Catalase, H2O2, Catalase, H2O2, Catalase, H2O2, Catalase, H2O2, Catalase)
	J22_products_1: 0  -> O2(O2_~0)@Neuronal_cytosol fRate19() #Modifiers(Catalase, H2O2, Catalase, H2O2, Catalase, H2O2, Catalase, H2O2, Catalase, H2O2, Catalase, H2O2, Catalase, H2O2, Catalase, H2O2, Catalase, H2O2, Catalase)
	J23_reactants_0: 0  -> H2O2()@Neuronal_cytosol -1*(fRate20()) #Modifiers(Gluta_per, H2O2, GSH, Gluta_per, H2O2, GSH, Gluta_per, H2O2, GSH, Gluta_per, H2O2, GSH, Gluta_per, H2O2, GSH, Gluta_per, H2O2, GSH, Gluta_per, H2O2, GSH, Gluta_per, H2O2, GSH, Gluta_per, H2O2, GSH, Gluta_per)
	J23_reactants_1: 0  -> GSH()@Neuronal_cytosol -1*(fRate20()) #Modifiers(Gluta_per, H2O2, GSH, Gluta_per, H2O2, GSH, Gluta_per, H2O2, GSH, Gluta_per, H2O2, GSH, Gluta_per, H2O2, GSH, Gluta_per, H2O2, GSH, Gluta_per, H2O2, GSH, Gluta_per, H2O2, GSH, Gluta_per, H2O2, GSH, Gluta_per)
	J23_products_0: 0  -> H2O()@Neuronal_cytosol fRate20() #Modifiers(Gluta_per, H2O2, GSH, Gluta_per, H2O2, GSH, Gluta_per, H2O2, GSH, Gluta_per, H2O2, GSH, Gluta_per, H2O2, GSH, Gluta_per, H2O2, GSH, Gluta_per, H2O2, GSH, Gluta_per, H2O2, GSH, Gluta_per, H2O2, GSH, Gluta_per)
	J23_products_1: 0  -> GSSG()@Neuronal_cytosol fRate20() #Modifiers(Gluta_per, H2O2, GSH, Gluta_per, H2O2, GSH, Gluta_per, H2O2, GSH, Gluta_per, H2O2, GSH, Gluta_per, H2O2, GSH, Gluta_per, H2O2, GSH, Gluta_per, H2O2, GSH, Gluta_per, H2O2, GSH, Gluta_per, H2O2, GSH, Gluta_per)
	J24_reactants_0: 0  -> GSSG()@Neuronal_cytosol -1*(fRate21()) #Modifiers(Gluta_red, GSSG, Gluta_red, GSSG, Gluta_red, GSSG, Gluta_red, GSSG, Gluta_red, GSSG, Gluta_red, GSSG, Gluta_red, GSSG, Gluta_red, GSSG, Gluta_red, GSSG, Gluta_red)
	J24_products_0: 0  -> GSH()@Neuronal_cytosol fRate21() #Modifiers(Gluta_red, GSSG, Gluta_red, GSSG, Gluta_red, GSSG, Gluta_red, GSSG, Gluta_red, GSSG, Gluta_red, GSSG, Gluta_red, GSSG, Gluta_red, GSSG, Gluta_red, GSSG, Gluta_red)
	J25_reactants_0: 0  -> DOPAL()@Neuronal_cytosol -1*(fRate22()) #Modifiers(ALDH, DOPAL, NAD, ALDH, DOPAL, NAD, ALDH, DOPAL, NAD, ALDH, DOPAL, NAD, ALDH, DOPAL, NAD, ALDH, DOPAL, NAD, ALDH, DOPAL, NAD, ALDH, DOPAL, NAD, ALDH, DOPAL, NAD, ALDH)
	J25_reactants_1: 0  -> NADpl()@Neuronal_cytosol -1*(fRate22()) #Modifiers(ALDH, DOPAL, NAD, ALDH, DOPAL, NAD, ALDH, DOPAL, NAD, ALDH, DOPAL, NAD, ALDH, DOPAL, NAD, ALDH, DOPAL, NAD, ALDH, DOPAL, NAD, ALDH, DOPAL, NAD, ALDH, DOPAL, NAD, ALDH)
	J25_products_0: 0  -> DOPAC()@Neuronal_cytosol fRate22() #Modifiers(ALDH, DOPAL, NAD, ALDH, DOPAL, NAD, ALDH, DOPAL, NAD, ALDH, DOPAL, NAD, ALDH, DOPAL, NAD, ALDH, DOPAL, NAD, ALDH, DOPAL, NAD, ALDH, DOPAL, NAD, ALDH, DOPAL, NAD, ALDH)
	J25_products_1: 0  -> NADH()@Neuronal_cytosol fRate22() #Modifiers(ALDH, DOPAL, NAD, ALDH, DOPAL, NAD, ALDH, DOPAL, NAD, ALDH, DOPAL, NAD, ALDH, DOPAL, NAD, ALDH, DOPAL, NAD, ALDH, DOPAL, NAD, ALDH, DOPAL, NAD, ALDH, DOPAL, NAD, ALDH)
	J26f_reactants_0: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol -1*(fRate23()) #Modifiers(ATP, Ub_E1, UbcH8_Ub, ATP, Ub_E1, UbcH8_Ub, ATP, Ub_E1, UbcH8_Ub, ATP, Ub_E1, UbcH8_Ub, ATP, Ub_E1, UbcH8_Ub, ATP, Ub_E1, UbcH8_Ub, ATP, Ub_E1, UbcH8_Ub, ATP, Ub_E1, UbcH8_Ub, ATP, Ub_E1, UbcH8_Ub, ATP)
	J26f_reactants_1: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~UbcH8_Ub,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol -1*(fRate23()) #Modifiers(ATP, Ub_E1, UbcH8_Ub, ATP, Ub_E1, UbcH8_Ub, ATP, Ub_E1, UbcH8_Ub, ATP, Ub_E1, UbcH8_Ub, ATP, Ub_E1, UbcH8_Ub, ATP, Ub_E1, UbcH8_Ub, ATP, Ub_E1, UbcH8_Ub, ATP, Ub_E1, UbcH8_Ub, ATP, Ub_E1, UbcH8_Ub, ATP)
	J26f_products_0: 0  -> E1()@Neuronal_cytosol fRate23() #Modifiers(ATP, Ub_E1, UbcH8_Ub, ATP, Ub_E1, UbcH8_Ub, ATP, Ub_E1, UbcH8_Ub, ATP, Ub_E1, UbcH8_Ub, ATP, Ub_E1, UbcH8_Ub, ATP, Ub_E1, UbcH8_Ub, ATP, Ub_E1, UbcH8_Ub, ATP, Ub_E1, UbcH8_Ub, ATP, Ub_E1, UbcH8_Ub, ATP)
	J26f_products_1: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~UbcH8ub2,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol fRate23() #Modifiers(ATP, Ub_E1, UbcH8_Ub, ATP, Ub_E1, UbcH8_Ub, ATP, Ub_E1, UbcH8_Ub, ATP, Ub_E1, UbcH8_Ub, ATP, Ub_E1, UbcH8_Ub, ATP, Ub_E1, UbcH8_Ub, ATP, Ub_E1, UbcH8_Ub, ATP, Ub_E1, UbcH8_Ub, ATP, Ub_E1, UbcH8_Ub, ATP)
	J26r_reactants_0: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~UbcH8ub2,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol -1*(fRate24()) #Modifiers(UCH_L1, UbcH8ub2, UCH_L1, UbcH8ub2, UCH_L1, UbcH8ub2, UCH_L1, UbcH8ub2, UCH_L1, UbcH8ub2, UCH_L1, UbcH8ub2, UCH_L1, UbcH8ub2, UCH_L1, UbcH8ub2, UCH_L1, UbcH8ub2, UCH_L1)
	J26r_products_0: 0  -> UbcH8()@Neuronal_cytosol fRate24() #Modifiers(UCH_L1, UbcH8ub2, UCH_L1, UbcH8ub2, UCH_L1, UbcH8ub2, UCH_L1, UbcH8ub2, UCH_L1, UbcH8ub2, UCH_L1, UbcH8ub2, UCH_L1, UbcH8ub2, UCH_L1, UbcH8ub2, UCH_L1, UbcH8ub2, UCH_L1)
	J26r_products_1: 0  -> Ubiquitin()@Neuronal_cytosol 2.0*fRate24() #Modifiers(UCH_L1, UbcH8ub2, UCH_L1, UbcH8ub2, UCH_L1, UbcH8ub2, UCH_L1, UbcH8ub2, UCH_L1, UbcH8ub2, UCH_L1, UbcH8ub2, UCH_L1, UbcH8ub2, UCH_L1, UbcH8ub2, UCH_L1, UbcH8ub2, UCH_L1)
	J27f_reactants_0: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol -1*(fRate25()) #Modifiers(ATP, Ub_E1, UbcH8ub2, ATP, Ub_E1, UbcH8ub2, ATP, Ub_E1, UbcH8ub2, ATP, Ub_E1, UbcH8ub2, ATP, Ub_E1, UbcH8ub2, ATP, Ub_E1, UbcH8ub2, ATP, Ub_E1, UbcH8ub2, ATP, Ub_E1, UbcH8ub2, ATP, Ub_E1, UbcH8ub2, ATP)
	J27f_reactants_1: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~UbcH8ub2,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol -1*(fRate25()) #Modifiers(ATP, Ub_E1, UbcH8ub2, ATP, Ub_E1, UbcH8ub2, ATP, Ub_E1, UbcH8ub2, ATP, Ub_E1, UbcH8ub2, ATP, Ub_E1, UbcH8ub2, ATP, Ub_E1, UbcH8ub2, ATP, Ub_E1, UbcH8ub2, ATP, Ub_E1, UbcH8ub2, ATP, Ub_E1, UbcH8ub2, ATP)
	J27f_products_0: 0  -> E1()@Neuronal_cytosol fRate25() #Modifiers(ATP, Ub_E1, UbcH8ub2, ATP, Ub_E1, UbcH8ub2, ATP, Ub_E1, UbcH8ub2, ATP, Ub_E1, UbcH8ub2, ATP, Ub_E1, UbcH8ub2, ATP, Ub_E1, UbcH8ub2, ATP, Ub_E1, UbcH8ub2, ATP, Ub_E1, UbcH8ub2, ATP, Ub_E1, UbcH8ub2, ATP)
	J27f_products_1: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~UbcH8ub3,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol fRate25() #Modifiers(ATP, Ub_E1, UbcH8ub2, ATP, Ub_E1, UbcH8ub2, ATP, Ub_E1, UbcH8ub2, ATP, Ub_E1, UbcH8ub2, ATP, Ub_E1, UbcH8ub2, ATP, Ub_E1, UbcH8ub2, ATP, Ub_E1, UbcH8ub2, ATP, Ub_E1, UbcH8ub2, ATP, Ub_E1, UbcH8ub2, ATP)
	J27r_reactants_0: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~UbcH8ub3,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol -1*(fRate26()) #Modifiers(UCH_L1, UbcH8ub3, UCH_L1, UbcH8ub3, UCH_L1, UbcH8ub3, UCH_L1, UbcH8ub3, UCH_L1, UbcH8ub3, UCH_L1, UbcH8ub3, UCH_L1, UbcH8ub3, UCH_L1, UbcH8ub3, UCH_L1, UbcH8ub3, UCH_L1)
	J27r_products_0: 0  -> UbcH8()@Neuronal_cytosol fRate26() #Modifiers(UCH_L1, UbcH8ub3, UCH_L1, UbcH8ub3, UCH_L1, UbcH8ub3, UCH_L1, UbcH8ub3, UCH_L1, UbcH8ub3, UCH_L1, UbcH8ub3, UCH_L1, UbcH8ub3, UCH_L1, UbcH8ub3, UCH_L1, UbcH8ub3, UCH_L1)
	J27r_products_1: 0  -> Ubiquitin()@Neuronal_cytosol 3.0*fRate26() #Modifiers(UCH_L1, UbcH8ub3, UCH_L1, UbcH8ub3, UCH_L1, UbcH8ub3, UCH_L1, UbcH8ub3, UCH_L1, UbcH8ub3, UCH_L1, UbcH8ub3, UCH_L1, UbcH8ub3, UCH_L1, UbcH8ub3, UCH_L1, UbcH8ub3, UCH_L1)
	J28f_reactants_0: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol -1*(fRate27()) #Modifiers(ATP, Ub_E1, UbcH8ub3, ATP, Ub_E1, UbcH8ub3, ATP, Ub_E1, UbcH8ub3, ATP, Ub_E1, UbcH8ub3, ATP, Ub_E1, UbcH8ub3, ATP, Ub_E1, UbcH8ub3, ATP, Ub_E1, UbcH8ub3, ATP, Ub_E1, UbcH8ub3, ATP, Ub_E1, UbcH8ub3, ATP)
	J28f_reactants_1: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~UbcH8ub3,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol -1*(fRate27()) #Modifiers(ATP, Ub_E1, UbcH8ub3, ATP, Ub_E1, UbcH8ub3, ATP, Ub_E1, UbcH8ub3, ATP, Ub_E1, UbcH8ub3, ATP, Ub_E1, UbcH8ub3, ATP, Ub_E1, UbcH8ub3, ATP, Ub_E1, UbcH8ub3, ATP, Ub_E1, UbcH8ub3, ATP, Ub_E1, UbcH8ub3, ATP)
	J28f_products_0: 0  -> E1()@Neuronal_cytosol fRate27() #Modifiers(ATP, Ub_E1, UbcH8ub3, ATP, Ub_E1, UbcH8ub3, ATP, Ub_E1, UbcH8ub3, ATP, Ub_E1, UbcH8ub3, ATP, Ub_E1, UbcH8ub3, ATP, Ub_E1, UbcH8ub3, ATP, Ub_E1, UbcH8ub3, ATP, Ub_E1, UbcH8ub3, ATP, Ub_E1, UbcH8ub3, ATP)
	J28f_products_1: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~UbcH8ub4,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol fRate27() #Modifiers(ATP, Ub_E1, UbcH8ub3, ATP, Ub_E1, UbcH8ub3, ATP, Ub_E1, UbcH8ub3, ATP, Ub_E1, UbcH8ub3, ATP, Ub_E1, UbcH8ub3, ATP, Ub_E1, UbcH8ub3, ATP, Ub_E1, UbcH8ub3, ATP, Ub_E1, UbcH8ub3, ATP, Ub_E1, UbcH8ub3, ATP)
	J28r_reactants_0: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~UbcH8ub4,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol -1*(fRate28()) #Modifiers(UCH_L1, UbcH8ub4, UCH_L1, UbcH8ub4, UCH_L1, UbcH8ub4, UCH_L1, UbcH8ub4, UCH_L1, UbcH8ub4, UCH_L1, UbcH8ub4, UCH_L1, UbcH8ub4, UCH_L1, UbcH8ub4, UCH_L1, UbcH8ub4, UCH_L1)
	J28r_products_0: 0  -> UbcH8()@Neuronal_cytosol fRate28() #Modifiers(UCH_L1, UbcH8ub4, UCH_L1, UbcH8ub4, UCH_L1, UbcH8ub4, UCH_L1, UbcH8ub4, UCH_L1, UbcH8ub4, UCH_L1, UbcH8ub4, UCH_L1, UbcH8ub4, UCH_L1, UbcH8ub4, UCH_L1, UbcH8ub4, UCH_L1)
	J28r_products_1: 0  -> Ubiquitin()@Neuronal_cytosol 4.0*fRate28() #Modifiers(UCH_L1, UbcH8ub4, UCH_L1, UbcH8ub4, UCH_L1, UbcH8ub4, UCH_L1, UbcH8ub4, UCH_L1, UbcH8ub4, UCH_L1, UbcH8ub4, UCH_L1, UbcH8ub4, UCH_L1, UbcH8ub4, UCH_L1, UbcH8ub4, UCH_L1)
	J29_reactants_0: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol -1*(fRate29()) #Modifiers(ATP, Ub_E1, UbcH13_Uev1a, ATP, Ub_E1, UbcH13_Uev1a, ATP, Ub_E1, UbcH13_Uev1a, ATP, Ub_E1, UbcH13_Uev1a, ATP, Ub_E1, UbcH13_Uev1a, ATP, Ub_E1, UbcH13_Uev1a, ATP, Ub_E1, UbcH13_Uev1a, ATP, Ub_E1, UbcH13_Uev1a, ATP, Ub_E1, UbcH13_Uev1a, ATP)
	J29_reactants_1: 0  -> UbcH13_Uev1a()@Neuronal_cytosol -1*(fRate29()) #Modifiers(ATP, Ub_E1, UbcH13_Uev1a, ATP, Ub_E1, UbcH13_Uev1a, ATP, Ub_E1, UbcH13_Uev1a, ATP, Ub_E1, UbcH13_Uev1a, ATP, Ub_E1, UbcH13_Uev1a, ATP, Ub_E1, UbcH13_Uev1a, ATP, Ub_E1, UbcH13_Uev1a, ATP, Ub_E1, UbcH13_Uev1a, ATP, Ub_E1, UbcH13_Uev1a, ATP)
	J29_products_0: 0  -> E1()@Neuronal_cytosol fRate29() #Modifiers(ATP, Ub_E1, UbcH13_Uev1a, ATP, Ub_E1, UbcH13_Uev1a, ATP, Ub_E1, UbcH13_Uev1a, ATP, Ub_E1, UbcH13_Uev1a, ATP, Ub_E1, UbcH13_Uev1a, ATP, Ub_E1, UbcH13_Uev1a, ATP, Ub_E1, UbcH13_Uev1a, ATP, Ub_E1, UbcH13_Uev1a, ATP, Ub_E1, UbcH13_Uev1a, ATP)
	J29_products_1: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~UbcH13_Uev1a_ub,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol fRate29() #Modifiers(ATP, Ub_E1, UbcH13_Uev1a, ATP, Ub_E1, UbcH13_Uev1a, ATP, Ub_E1, UbcH13_Uev1a, ATP, Ub_E1, UbcH13_Uev1a, ATP, Ub_E1, UbcH13_Uev1a, ATP, Ub_E1, UbcH13_Uev1a, ATP, Ub_E1, UbcH13_Uev1a, ATP, Ub_E1, UbcH13_Uev1a, ATP, Ub_E1, UbcH13_Uev1a, ATP)
	J30_reactants_0: 0  -> Alpha_synuclein()@Neuronal_cytosol -1*(fRate30()) #Modifiers(Alpha_synuclein, UCH_L1, Alpha_synuclein, UCH_L1, Alpha_synuclein, UCH_L1, Alpha_synuclein, UCH_L1, Alpha_synuclein, UCH_L1, Alpha_synuclein, UCH_L1, Alpha_synuclein, UCH_L1, Alpha_synuclein, UCH_L1, Alpha_synuclein, UCH_L1)
	J30_reactants_1: 0  -> UCH_L1()@Neuronal_cytosol -1*(fRate30()) #Modifiers(Alpha_synuclein, UCH_L1, Alpha_synuclein, UCH_L1, Alpha_synuclein, UCH_L1, Alpha_synuclein, UCH_L1, Alpha_synuclein, UCH_L1, Alpha_synuclein, UCH_L1, Alpha_synuclein, UCH_L1, Alpha_synuclein, UCH_L1, Alpha_synuclein, UCH_L1)
	J30_products_0: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~asyn_UCH_L1,asyn_ub~0)@Neuronal_cytosol fRate30() #Modifiers(Alpha_synuclein, UCH_L1, Alpha_synuclein, UCH_L1, Alpha_synuclein, UCH_L1, Alpha_synuclein, UCH_L1, Alpha_synuclein, UCH_L1, Alpha_synuclein, UCH_L1, Alpha_synuclein, UCH_L1, Alpha_synuclein, UCH_L1, Alpha_synuclein, UCH_L1)
	J31_reactants_0: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~UbcH13_Uev1a_ub,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol -1*(fRate31()) #Modifiers(UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1)
	J31_reactants_1: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~asyn_UCH_L1,asyn_ub~0)@Neuronal_cytosol -1*(fRate31()) #Modifiers(UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1)
	J31_products_0: 0  -> UbcH13_Uev1a()@Neuronal_cytosol fRate31() #Modifiers(UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1)
	J31_products_1: 0  -> UCH_L1()@Neuronal_cytosol fRate31() #Modifiers(UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1)
	J31_products_2: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~asyn_ub)@Neuronal_cytosol fRate31() #Modifiers(UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1, UbcH13_Uev1a_ub, asyn_UCH_L1)
	J32_reactants_0: 0  -> Alpha_synuclein()@Neuronal_cytosol -1*(fRate32()) #Modifiers(Alpha_synuclein, asyn_ub, Alpha_synuclein, asyn_ub, Alpha_synuclein, asyn_ub, Alpha_synuclein, asyn_ub, Alpha_synuclein, asyn_ub, Alpha_synuclein, asyn_ub, Alpha_synuclein, asyn_ub, Alpha_synuclein, asyn_ub, Alpha_synuclein, asyn_ub)
	J32_reactants_1: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~asyn_ub)@Neuronal_cytosol -1*(fRate32()) #Modifiers(Alpha_synuclein, asyn_ub, Alpha_synuclein, asyn_ub, Alpha_synuclein, asyn_ub, Alpha_synuclein, asyn_ub, Alpha_synuclein, asyn_ub, Alpha_synuclein, asyn_ub, Alpha_synuclein, asyn_ub, Alpha_synuclein, asyn_ub, Alpha_synuclein, asyn_ub)
	J32_products_0: 0  -> Protofibril()@Neuronal_cytosol fRate32() #Modifiers(Alpha_synuclein, asyn_ub, Alpha_synuclein, asyn_ub, Alpha_synuclein, asyn_ub, Alpha_synuclein, asyn_ub, Alpha_synuclein, asyn_ub, Alpha_synuclein, asyn_ub, Alpha_synuclein, asyn_ub, Alpha_synuclein, asyn_ub, Alpha_synuclein, asyn_ub)
	J33_reactants_0: 0  -> Protofibril()@Neuronal_cytosol -1*(fRate33()) #Modifiers(Protofibril, UCH_L1, Protofibril, UCH_L1, Protofibril, UCH_L1, Protofibril, UCH_L1, Protofibril, UCH_L1, Protofibril, UCH_L1, Protofibril, UCH_L1, Protofibril, UCH_L1, Protofibril, UCH_L1)
	J33_reactants_1: 0  -> UCH_L1()@Neuronal_cytosol -1*(fRate33()) #Modifiers(Protofibril, UCH_L1, Protofibril, UCH_L1, Protofibril, UCH_L1, Protofibril, UCH_L1, Protofibril, UCH_L1, Protofibril, UCH_L1, Protofibril, UCH_L1, Protofibril, UCH_L1, Protofibril, UCH_L1)
	J33_products_0: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~Protofibril_UCH_L1,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol fRate33() #Modifiers(Protofibril, UCH_L1, Protofibril, UCH_L1, Protofibril, UCH_L1, Protofibril, UCH_L1, Protofibril, UCH_L1, Protofibril, UCH_L1, Protofibril, UCH_L1, Protofibril, UCH_L1, Protofibril, UCH_L1)
	J34_reactants_0: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~UbcH13_Uev1a_ub,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol -1*(fRate34()) #Modifiers(UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1)
	J34_reactants_1: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~Protofibril_UCH_L1,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol -1*(fRate34()) #Modifiers(UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1)
	J34_products_0: 0  -> UbcH13_Uev1a()@Neuronal_cytosol fRate34() #Modifiers(UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1)
	J34_products_1: 0  -> UCH_L1()@Neuronal_cytosol fRate34() #Modifiers(UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1)
	J34_products_2: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~Protofibril_Ub,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol fRate34() #Modifiers(UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1, UbcH13_Uev1a_ub, Protofibril_UCH_L1)
	J35_reactants_0: 0  -> Protofibril()@Neuronal_cytosol -1*(fRate35()) #Modifiers(Protofibril, Protofibril_Ub, Protofibril, Protofibril_Ub, Protofibril, Protofibril_Ub, Protofibril, Protofibril_Ub, Protofibril, Protofibril_Ub, Protofibril, Protofibril_Ub, Protofibril, Protofibril_Ub, Protofibril, Protofibril_Ub, Protofibril, Protofibril_Ub)
	J35_reactants_1: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~Protofibril_Ub,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol -1*(fRate35()) #Modifiers(Protofibril, Protofibril_Ub, Protofibril, Protofibril_Ub, Protofibril, Protofibril_Ub, Protofibril, Protofibril_Ub, Protofibril, Protofibril_Ub, Protofibril, Protofibril_Ub, Protofibril, Protofibril_Ub, Protofibril, Protofibril_Ub, Protofibril, Protofibril_Ub)
	J35_products_0: 0  -> Fibril()@Neuronal_cytosol fRate35() #Modifiers(Protofibril, Protofibril_Ub, Protofibril, Protofibril_Ub, Protofibril, Protofibril_Ub, Protofibril, Protofibril_Ub, Protofibril, Protofibril_Ub, Protofibril, Protofibril_Ub, Protofibril, Protofibril_Ub, Protofibril, Protofibril_Ub, Protofibril, Protofibril_Ub)
	J36_reactants_0: 0  -> Autophagosome()@Autophagosome -1*(fRate36()) #Modifiers(Lysosome_0, Autophagosome_0, Lysosome_0, Autophagosome_0, Lysosome_0, Autophagosome_0, Lysosome_0, Autophagosome_0, Lysosome_0, Autophagosome_0, Lysosome_0, Autophagosome_0, Lysosome_0, Autophagosome_0, Lysosome_0, Autophagosome_0, Lysosome_0, Autophagosome_0, Lysosome_0)
	J36_products_0: 0  -> Fragments()@Neuronal_cytosol fRate36() #Modifiers(Lysosome_0, Autophagosome_0, Lysosome_0, Autophagosome_0, Lysosome_0, Autophagosome_0, Lysosome_0, Autophagosome_0, Lysosome_0, Autophagosome_0, Lysosome_0, Autophagosome_0, Lysosome_0, Autophagosome_0, Lysosome_0, Autophagosome_0, Lysosome_0, Autophagosome_0, Lysosome_0)
	J37_reactants_0: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~UbcH8ub4,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol -1*(fRate37()) #Modifiers(UbcH8ub4, asyn_UCH_L1, UbcH8ub4, asyn_UCH_L1, UbcH8ub4, asyn_UCH_L1, UbcH8ub4, asyn_UCH_L1, UbcH8ub4, asyn_UCH_L1, UbcH8ub4, asyn_UCH_L1, UbcH8ub4, asyn_UCH_L1, UbcH8ub4, asyn_UCH_L1, UbcH8ub4, asyn_UCH_L1)
	J37_reactants_1: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~asyn_UCH_L1,asyn_ub~0)@Neuronal_cytosol -1*(fRate37()) #Modifiers(UbcH8ub4, asyn_UCH_L1, UbcH8ub4, asyn_UCH_L1, UbcH8ub4, asyn_UCH_L1, UbcH8ub4, asyn_UCH_L1, UbcH8ub4, asyn_UCH_L1, UbcH8ub4, asyn_UCH_L1, UbcH8ub4, asyn_UCH_L1, UbcH8ub4, asyn_UCH_L1, UbcH8ub4, asyn_UCH_L1)
	J37_products_0: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~UCH_L1_asyn_ub4,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol fRate37() #Modifiers(UbcH8ub4, asyn_UCH_L1, UbcH8ub4, asyn_UCH_L1, UbcH8ub4, asyn_UCH_L1, UbcH8ub4, asyn_UCH_L1, UbcH8ub4, asyn_UCH_L1, UbcH8ub4, asyn_UCH_L1, UbcH8ub4, asyn_UCH_L1, UbcH8ub4, asyn_UCH_L1, UbcH8ub4, asyn_UCH_L1)
	J37_products_1: 0  -> UbcH8()@Neuronal_cytosol fRate37() #Modifiers(UbcH8ub4, asyn_UCH_L1, UbcH8ub4, asyn_UCH_L1, UbcH8ub4, asyn_UCH_L1, UbcH8ub4, asyn_UCH_L1, UbcH8ub4, asyn_UCH_L1, UbcH8ub4, asyn_UCH_L1, UbcH8ub4, asyn_UCH_L1, UbcH8ub4, asyn_UCH_L1, UbcH8ub4, asyn_UCH_L1)
	J38_reactants_0: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~UCH_L1_asyn_ub4,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol -1*(fRate38()) #Modifiers(Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1)
	J38_products_0: 0  -> Fragments()@Neuronal_cytosol fRate38() #Modifiers(Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1)
	J38_products_1: 0  -> UCH_L1()@Neuronal_cytosol fRate38() #Modifiers(Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1)
	J38_products_2: 0  -> Ubiquitin()@Neuronal_cytosol 4.0*fRate38() #Modifiers(Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1, UCH_L1_asyn_ub4, Proteasome_0, ATP, UCH_L1)
	J43_reactants_0: 0  -> Alpha_synuclein()@Neuronal_cytosol -1*(fRate39()) #Modifiers(Alpha_synuclein, Hsc70, Alpha_synuclein, Hsc70, Alpha_synuclein, Hsc70, Alpha_synuclein, Hsc70, Alpha_synuclein, Hsc70, Alpha_synuclein, Hsc70, Alpha_synuclein, Hsc70, Alpha_synuclein, Hsc70, Alpha_synuclein, Hsc70)
	J43_reactants_1: 0  -> Hsc70()@Neuronal_cytosol -1*(fRate39()) #Modifiers(Alpha_synuclein, Hsc70, Alpha_synuclein, Hsc70, Alpha_synuclein, Hsc70, Alpha_synuclein, Hsc70, Alpha_synuclein, Hsc70, Alpha_synuclein, Hsc70, Alpha_synuclein, Hsc70, Alpha_synuclein, Hsc70, Alpha_synuclein, Hsc70)
	J43_products_0: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~Hsc70_asyn,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol fRate39() #Modifiers(Alpha_synuclein, Hsc70, Alpha_synuclein, Hsc70, Alpha_synuclein, Hsc70, Alpha_synuclein, Hsc70, Alpha_synuclein, Hsc70, Alpha_synuclein, Hsc70, Alpha_synuclein, Hsc70, Alpha_synuclein, Hsc70, Alpha_synuclein, Hsc70)
	J44_reactants_0: 0  -> Protofibril()@Neuronal_cytosol -1*(fRate40()) #Modifiers(Protofibril, Hsc70, Protofibril, Hsc70, Protofibril, Hsc70, Protofibril, Hsc70, Protofibril, Hsc70, Protofibril, Hsc70, Protofibril, Hsc70, Protofibril, Hsc70, Protofibril, Hsc70)
	J44_reactants_1: 0  -> Hsc70()@Neuronal_cytosol -1*(fRate40()) #Modifiers(Protofibril, Hsc70, Protofibril, Hsc70, Protofibril, Hsc70, Protofibril, Hsc70, Protofibril, Hsc70, Protofibril, Hsc70, Protofibril, Hsc70, Protofibril, Hsc70, Protofibril, Hsc70)
	J44_products_0: 0  -> Ub_E1(Hsc70_Protofibril~Hsc70_Protofibril,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol fRate40() #Modifiers(Protofibril, Hsc70, Protofibril, Hsc70, Protofibril, Hsc70, Protofibril, Hsc70, Protofibril, Hsc70, Protofibril, Hsc70, Protofibril, Hsc70, Protofibril, Hsc70, Protofibril, Hsc70)
	J45_reactants_0: 0  -> Fibril()@Neuronal_cytosol -1*(fRate41()) #Modifiers(Fibril, Hsc70, Fibril, Hsc70, Fibril, Hsc70, Fibril, Hsc70, Fibril, Hsc70, Fibril, Hsc70, Fibril, Hsc70, Fibril, Hsc70, Fibril, Hsc70)
	J45_reactants_1: 0  -> Hsc70()@Neuronal_cytosol -1*(fRate41()) #Modifiers(Fibril, Hsc70, Fibril, Hsc70, Fibril, Hsc70, Fibril, Hsc70, Fibril, Hsc70, Fibril, Hsc70, Fibril, Hsc70, Fibril, Hsc70, Fibril, Hsc70)
	J45_products_0: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~Hsc70_fibril,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol fRate41() #Modifiers(Fibril, Hsc70, Fibril, Hsc70, Fibril, Hsc70, Fibril, Hsc70, Fibril, Hsc70, Fibril, Hsc70, Fibril, Hsc70, Fibril, Hsc70, Fibril, Hsc70)
	J46_reactants_0: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~Hsc70_asyn,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol -1*(fRate42()) #Modifiers(Lysosome_0, Hsc70_asyn, Lysosome_0, Hsc70_asyn, Lysosome_0, Hsc70_asyn, Lysosome_0, Hsc70_asyn, Lysosome_0, Hsc70_asyn, Lysosome_0, Hsc70_asyn, Lysosome_0, Hsc70_asyn, Lysosome_0, Hsc70_asyn, Lysosome_0, Hsc70_asyn, Lysosome_0)
	J46_products_0: 0  -> Hsc70()@Neuronal_cytosol fRate42() #Modifiers(Lysosome_0, Hsc70_asyn, Lysosome_0, Hsc70_asyn, Lysosome_0, Hsc70_asyn, Lysosome_0, Hsc70_asyn, Lysosome_0, Hsc70_asyn, Lysosome_0, Hsc70_asyn, Lysosome_0, Hsc70_asyn, Lysosome_0, Hsc70_asyn, Lysosome_0, Hsc70_asyn, Lysosome_0)
	J46_products_1: 0  -> Fragments()@Neuronal_cytosol fRate42() #Modifiers(Lysosome_0, Hsc70_asyn, Lysosome_0, Hsc70_asyn, Lysosome_0, Hsc70_asyn, Lysosome_0, Hsc70_asyn, Lysosome_0, Hsc70_asyn, Lysosome_0, Hsc70_asyn, Lysosome_0, Hsc70_asyn, Lysosome_0, Hsc70_asyn, Lysosome_0, Hsc70_asyn, Lysosome_0)
	J47_reactants_0: 0  -> Ub_E1(Hsc70_Protofibril~Hsc70_Protofibril,Hsc70_asyn~0,Hsc70_fibril~0,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol -1*(fRate43()) #Modifiers(Lysosome_0, Hsc70_Protofibril, Lysosome_0, Hsc70_Protofibril, Lysosome_0, Hsc70_Protofibril, Lysosome_0, Hsc70_Protofibril, Lysosome_0, Hsc70_Protofibril, Lysosome_0, Hsc70_Protofibril, Lysosome_0, Hsc70_Protofibril, Lysosome_0, Hsc70_Protofibril, Lysosome_0, Hsc70_Protofibril, Lysosome_0)
	J47_products_0: 0  -> Hsc70()@Neuronal_cytosol fRate43() #Modifiers(Lysosome_0, Hsc70_Protofibril, Lysosome_0, Hsc70_Protofibril, Lysosome_0, Hsc70_Protofibril, Lysosome_0, Hsc70_Protofibril, Lysosome_0, Hsc70_Protofibril, Lysosome_0, Hsc70_Protofibril, Lysosome_0, Hsc70_Protofibril, Lysosome_0, Hsc70_Protofibril, Lysosome_0, Hsc70_Protofibril, Lysosome_0)
	J47_products_1: 0  -> Fragments()@Neuronal_cytosol fRate43() #Modifiers(Lysosome_0, Hsc70_Protofibril, Lysosome_0, Hsc70_Protofibril, Lysosome_0, Hsc70_Protofibril, Lysosome_0, Hsc70_Protofibril, Lysosome_0, Hsc70_Protofibril, Lysosome_0, Hsc70_Protofibril, Lysosome_0, Hsc70_Protofibril, Lysosome_0, Hsc70_Protofibril, Lysosome_0, Hsc70_Protofibril, Lysosome_0)
	J48_reactants_0: 0  -> Ub_E1(Hsc70_Protofibril~0,Hsc70_asyn~0,Hsc70_fibril~Hsc70_fibril,Parkin_sub_ub4~0,Parkin_synphilin_1~0,Parkin_synphilin_1_ub~0,Protofibril_UCH_L1~0,Protofibril_Ub~0,UCH_L1_asyn_ub4~0,UbcH13_Uev1a_ub~0,UbcH8_Ub~0,UbcH8ub2~0,UbcH8ub3~0,UbcH8ub4~0,asyn_UCH_L1~0,asyn_ub~0)@Neuronal_cytosol -1*(fRate44()) #Modifiers(Lysosome_0, Hsc70_fibril, Lysosome_0, Hsc70_fibril, Lysosome_0, Hsc70_fibril, Lysosome_0, Hsc70_fibril, Lysosome_0, Hsc70_fibril, Lysosome_0, Hsc70_fibril, Lysosome_0, Hsc70_fibril, Lysosome_0, Hsc70_fibril, Lysosome_0, Hsc70_fibril, Lysosome_0)
	J48_products_0: 0  -> Hsc70()@Neuronal_cytosol fRate44() #Modifiers(Lysosome_0, Hsc70_fibril, Lysosome_0, Hsc70_fibril, Lysosome_0, Hsc70_fibril, Lysosome_0, Hsc70_fibril, Lysosome_0, Hsc70_fibril, Lysosome_0, Hsc70_fibril, Lysosome_0, Hsc70_fibril, Lysosome_0, Hsc70_fibril, Lysosome_0, Hsc70_fibril, Lysosome_0)
	J48_products_1: 0  -> Fragments()@Neuronal_cytosol fRate44() #Modifiers(Lysosome_0, Hsc70_fibril, Lysosome_0, Hsc70_fibril, Lysosome_0, Hsc70_fibril, Lysosome_0, Hsc70_fibril, Lysosome_0, Hsc70_fibril, Lysosome_0, Hsc70_fibril, Lysosome_0, Hsc70_fibril, Lysosome_0, Hsc70_fibril, Lysosome_0, Hsc70_fibril, Lysosome_0)
	J50_reactants_0: 0  -> Alpha_synuclein()@Neuronal_cytosol -1*(fRate45()) #Modifiers(Alpha_synuclein, Preautophagosome_membrane, Alpha_synuclein, Preautophagosome_membrane, Alpha_synuclein, Preautophagosome_membrane, Alpha_synuclein, Preautophagosome_membrane, Alpha_synuclein, Preautophagosome_membrane, Alpha_synuclein, Preautophagosome_membrane, Alpha_synuclein, Preautophagosome_membrane, Alpha_synuclein, Preautophagosome_membrane, Alpha_synuclein, Preautophagosome_membrane)
	J50_reactants_1: 0  -> Preautophagosome_membrane()@Neuronal_cytosol -1*(fRate45()) #Modifiers(Alpha_synuclein, Preautophagosome_membrane, Alpha_synuclein, Preautophagosome_membrane, Alpha_synuclein, Preautophagosome_membrane, Alpha_synuclein, Preautophagosome_membrane, Alpha_synuclein, Preautophagosome_membrane, Alpha_synuclein, Preautophagosome_membrane, Alpha_synuclein, Preautophagosome_membrane, Alpha_synuclein, Preautophagosome_membrane, Alpha_synuclein, Preautophagosome_membrane)
	J50_products_0: 0  -> Autophagosome()@Autophagosome fRate45() #Modifiers(Alpha_synuclein, Preautophagosome_membrane, Alpha_synuclein, Preautophagosome_membrane, Alpha_synuclein, Preautophagosome_membrane, Alpha_synuclein, Preautophagosome_membrane, Alpha_synuclein, Preautophagosome_membrane, Alpha_synuclein, Preautophagosome_membrane, Alpha_synuclein, Preautophagosome_membrane, Alpha_synuclein, Preautophagosome_membrane, Alpha_synuclein, Preautophagosome_membrane)
	J51_reactants_0: 0  -> Protofibril()@Neuronal_cytosol -1*(fRate46()) #Modifiers(Protofibril, Preautophagosome_membrane, Protofibril, Preautophagosome_membrane, Protofibril, Preautophagosome_membrane, Protofibril, Preautophagosome_membrane, Protofibril, Preautophagosome_membrane, Protofibril, Preautophagosome_membrane, Protofibril, Preautophagosome_membrane, Protofibril, Preautophagosome_membrane, Protofibril, Preautophagosome_membrane)
	J51_reactants_1: 0  -> Preautophagosome_membrane()@Neuronal_cytosol -1*(fRate46()) #Modifiers(Protofibril, Preautophagosome_membrane, Protofibril, Preautophagosome_membrane, Protofibril, Preautophagosome_membrane, Protofibril, Preautophagosome_membrane, Protofibril, Preautophagosome_membrane, Protofibril, Preautophagosome_membrane, Protofibril, Preautophagosome_membrane, Protofibril, Preautophagosome_membrane, Protofibril, Preautophagosome_membrane)
	J51_products_0: 0  -> Autophagosome()@Autophagosome fRate46() #Modifiers(Protofibril, Preautophagosome_membrane, Protofibril, Preautophagosome_membrane, Protofibril, Preautophagosome_membrane, Protofibril, Preautophagosome_membrane, Protofibril, Preautophagosome_membrane, Protofibril, Preautophagosome_membrane, Protofibril, Preautophagosome_membrane, Protofibril, Preautophagosome_membrane, Protofibril, Preautophagosome_membrane)
	J52_reactants_0: 0  -> Fibril()@Neuronal_cytosol -1*(fRate47()) #Modifiers(Fibril, Preautophagosome_membrane, Fibril, Preautophagosome_membrane, Fibril, Preautophagosome_membrane, Fibril, Preautophagosome_membrane, Fibril, Preautophagosome_membrane, Fibril, Preautophagosome_membrane, Fibril, Preautophagosome_membrane, Fibril, Preautophagosome_membrane, Fibril, Preautophagosome_membrane)
	J52_reactants_1: 0  -> Preautophagosome_membrane()@Neuronal_cytosol -1*(fRate47()) #Modifiers(Fibril, Preautophagosome_membrane, Fibril, Preautophagosome_membrane, Fibril, Preautophagosome_membrane, Fibril, Preautophagosome_membrane, Fibril, Preautophagosome_membrane, Fibril, Preautophagosome_membrane, Fibril, Preautophagosome_membrane, Fibril, Preautophagosome_membrane, Fibril, Preautophagosome_membrane)
	J52_products_0: 0  -> Autophagosome()@Autophagosome fRate47() #Modifiers(Fibril, Preautophagosome_membrane, Fibril, Preautophagosome_membrane, Fibril, Preautophagosome_membrane, Fibril, Preautophagosome_membrane, Fibril, Preautophagosome_membrane, Fibril, Preautophagosome_membrane, Fibril, Preautophagosome_membrane, Fibril, Preautophagosome_membrane, Fibril, Preautophagosome_membrane)
	J53_reactants_0: 0  -> Lewy_body()@Neuronal_cytosol -1*(fRate48()) #Modifiers(Lewy_body, Preautophagosome_membrane, Lewy_body, Preautophagosome_membrane, Lewy_body, Preautophagosome_membrane, Lewy_body, Preautophagosome_membrane, Lewy_body, Preautophagosome_membrane, Lewy_body, Preautophagosome_membrane, Lewy_body, Preautophagosome_membrane, Lewy_body, Preautophagosome_membrane, Lewy_body, Preautophagosome_membrane)
	J53_reactants_1: 0  -> Preautophagosome_membrane()@Neuronal_cytosol -1*(fRate48()) #Modifiers(Lewy_body, Preautophagosome_membrane, Lewy_body, Preautophagosome_membrane, Lewy_body, Preautophagosome_membrane, Lewy_body, Preautophagosome_membrane, Lewy_body, Preautophagosome_membrane, Lewy_body, Preautophagosome_membrane, Lewy_body, Preautophagosome_membrane, Lewy_body, Preautophagosome_membrane, Lewy_body, Preautophagosome_membrane)
	J53_products_0: 0  -> Autophagosome()@Autophagosome fRate48() #Modifiers(Lewy_body, Preautophagosome_membrane, Lewy_body, Preautophagosome_membrane, Lewy_body, Preautophagosome_membrane, Lewy_body, Preautophagosome_membrane, Lewy_body, Preautophagosome_membrane, Lewy_body, Preautophagosome_membrane, Lewy_body, Preautophagosome_membrane, Lewy_body, Preautophagosome_membrane, Lewy_body, Preautophagosome_membrane)
	J54_reactants_0: 0  -> DA_GSH(DA_S_parkin~0,DA_quinone~DA_quinone)@Neuronal_cytosol -1*(fRate49()) #Modifiers(DA_quinone, Parkin, DA_quinone, Parkin, DA_quinone, Parkin, DA_quinone, Parkin, DA_quinone, Parkin, DA_quinone, Parkin, DA_quinone, Parkin, DA_quinone, Parkin, DA_quinone, Parkin)
	J54_reactants_1: 0  -> Parkin()@Neuronal_cytosol -1*(fRate49()) #Modifiers(DA_quinone, Parkin, DA_quinone, Parkin, DA_quinone, Parkin, DA_quinone, Parkin, DA_quinone, Parkin, DA_quinone, Parkin, DA_quinone, Parkin, DA_quinone, Parkin, DA_quinone, Parkin)
	J54_products_0: 0  -> DA_GSH(DA_S_parkin~DA_S_parkin,DA_quinone~0)@Neuronal_cytosol fRate49() #Modifiers(DA_quinone, Parkin, DA_quinone, Parkin, DA_quinone, Parkin, DA_quinone, Parkin, DA_quinone, Parkin, DA_quinone, Parkin, DA_quinone, Parkin, DA_quinone, Parkin, DA_quinone, Parkin)
	J55_reactants_0: 0  -> Dopamine()@Neuronal_cytosol -1*(fRate50()) #Modifiers(Dopamine, O2, Dopamine, O2, Dopamine, O2, Dopamine, O2, Dopamine, O2, Dopamine, O2, Dopamine, O2, Dopamine, O2, Dopamine, O2)
	J55_reactants_1: 0  -> O2(O2_~O2_)@Neuronal_cytosol -1*(fRate50()) #Modifiers(Dopamine, O2, Dopamine, O2, Dopamine, O2, Dopamine, O2, Dopamine, O2, Dopamine, O2, Dopamine, O2, Dopamine, O2, Dopamine, O2)
	J55_products_0: 0  -> H2O2()@Neuronal_cytosol fRate50() #Modifiers(Dopamine, O2, Dopamine, O2, Dopamine, O2, Dopamine, O2, Dopamine, O2, Dopamine, O2, Dopamine, O2, Dopamine, O2, Dopamine, O2)
	J55_products_1: 0  -> DA_GSH(DA_S_parkin~0,DA_quinone~DA_quinone)@Neuronal_cytosol fRate50() #Modifiers(Dopamine, O2, Dopamine, O2, Dopamine, O2, Dopamine, O2, Dopamine, O2, Dopamine, O2, Dopamine, O2, Dopamine, O2, Dopamine, O2)
	J56_reactants_0: 0  -> O2(O2_~O2_)@Neuronal_cytosol -1*(fRate51()) #Modifiers(SOD, O2, SOD, O2, SOD, O2, SOD, O2, SOD, O2, SOD, O2, SOD, O2, SOD, O2, SOD, O2, SOD)
	J56_products_0: 0  -> H2O2()@Neuronal_cytosol fRate51() #Modifiers(SOD, O2, SOD, O2, SOD, O2, SOD, O2, SOD, O2, SOD, O2, SOD, O2, SOD, O2, SOD, O2, SOD)
	J56_products_1: 0  -> O2(O2_~0)@Neuronal_cytosol fRate51() #Modifiers(SOD, O2, SOD, O2, SOD, O2, SOD, O2, SOD, O2, SOD, O2, SOD, O2, SOD, O2, SOD, O2, SOD)
	J57_reactants_0: 0  -> DA_GSH(DA_S_parkin~0,DA_quinone~DA_quinone)@Neuronal_cytosol -1*(fRate52()) #Modifiers(DA_quinone, GSH, DA_quinone, GSH, DA_quinone, GSH, DA_quinone, GSH, DA_quinone, GSH, DA_quinone, GSH, DA_quinone, GSH, DA_quinone, GSH, DA_quinone, GSH)
	J57_reactants_1: 0  -> GSH()@Neuronal_cytosol -1*(fRate52()) #Modifiers(DA_quinone, GSH, DA_quinone, GSH, DA_quinone, GSH, DA_quinone, GSH, DA_quinone, GSH, DA_quinone, GSH, DA_quinone, GSH, DA_quinone, GSH, DA_quinone, GSH)
	J57_products_0: 0  -> DA_GSH(DA_S_parkin~0,DA_quinone~0)@Neuronal_cytosol fRate52() #Modifiers(DA_quinone, GSH, DA_quinone, GSH, DA_quinone, GSH, DA_quinone, GSH, DA_quinone, GSH, DA_quinone, GSH, DA_quinone, GSH, DA_quinone, GSH, DA_quinone, GSH)
	J100_reactants_0: 0  -> L_Dopa()@Neuronal_cytosol -1*(fRate53()) #Modifiers(L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine)
	J100_reactants_1: 0  -> O2(O2_~0)@Neuronal_cytosol -1*(fRate53()) #Modifiers(L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine)
	J100_reactants_2: 0  -> Cysteine()@Neuronal_cytosol -1*(fRate53()) #Modifiers(L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine)
	J100_products_0: 0  -> Neuromelanin()@Neuronal_cytosol fRate53() #Modifiers(L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine)
	J100_products_1: 0  -> H2O2()@Neuronal_cytosol fRate53() #Modifiers(L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine)
	J100_products_2: 0  -> CO2()@Neuronal_cytosol fRate53() #Modifiers(L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine, L_Dopa, O2_0, Cysteine)
	J101_reactants_0: 0  -> L_Tyr()@Neuronal_cytosol -1*(fRate54()) #Modifiers(L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine)
	J101_reactants_1: 0  -> O2(O2_~0)@Neuronal_cytosol -1*(fRate54()) #Modifiers(L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine)
	J101_reactants_2: 0  -> Cysteine()@Neuronal_cytosol -1*(fRate54()) #Modifiers(L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine)
	J101_products_0: 0  -> Neuromelanin()@Neuronal_cytosol fRate54() #Modifiers(L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine)
	J101_products_1: 0  -> H2O2()@Neuronal_cytosol fRate54() #Modifiers(L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine)
	J101_products_2: 0  -> CO2()@Neuronal_cytosol fRate54() #Modifiers(L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine, L_Tyr, O2_0, Cysteine)
	J102_reactants_0: 0  -> DA_GSH(DA_S_parkin~0,DA_quinone~DA_quinone)@Neuronal_cytosol -1*(fRate55()) #Modifiers(DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine)
	J102_reactants_1: 0  -> O2(O2_~0)@Neuronal_cytosol -1*(fRate55()) #Modifiers(DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine)
	J102_reactants_2: 0  -> Cysteine()@Neuronal_cytosol -1*(fRate55()) #Modifiers(DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine)
	J102_products_0: 0  -> Neuromelanin()@Neuronal_cytosol fRate55() #Modifiers(DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine)
	J102_products_1: 0  -> CO2()@Neuronal_cytosol fRate55() #Modifiers(DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine, DA_quinone, O2_0, Cysteine)
	J115_reactants_0: 0  -> Fe3pl()@Neuronal_cytosol -1*(fRate56()) #Modifiers(Fe3, Neuromelanin, Fe3, Neuromelanin, Fe3, Neuromelanin, Fe3, Neuromelanin, Fe3, Neuromelanin, Fe3, Neuromelanin, Fe3, Neuromelanin, Fe3, Neuromelanin, Fe3, Neuromelanin)
	J115_reactants_1: 0  -> Neuromelanin()@Neuronal_cytosol -1*(fRate56()) #Modifiers(Fe3, Neuromelanin, Fe3, Neuromelanin, Fe3, Neuromelanin, Fe3, Neuromelanin, Fe3, Neuromelanin, Fe3, Neuromelanin, Fe3, Neuromelanin, Fe3, Neuromelanin, Fe3, Neuromelanin)
	J115_products_0: 0  -> V_ntox_ba(Neuromelanin_ntox_Fe3pl~Neuromelanin_ntox_Fe3pl)@Neuronal_cytosol fRate56() #Modifiers(Fe3, Neuromelanin, Fe3, Neuromelanin, Fe3, Neuromelanin, Fe3, Neuromelanin, Fe3, Neuromelanin, Fe3, Neuromelanin, Fe3, Neuromelanin, Fe3, Neuromelanin, Fe3, Neuromelanin)
	J116_reactants_0: 0  -> Neuromelanin()@Neuronal_cytosol -1*(fRate57()) #Modifiers(Neuromelanin, Neurotoxins, Neuromelanin, Neurotoxins, Neuromelanin, Neurotoxins, Neuromelanin, Neurotoxins, Neuromelanin, Neurotoxins, Neuromelanin, Neurotoxins, Neuromelanin, Neurotoxins, Neuromelanin, Neurotoxins, Neuromelanin, Neurotoxins)
	J116_reactants_1: 0  -> Neurotoxins()@Neuronal_cytosol -1*(fRate57()) #Modifiers(Neuromelanin, Neurotoxins, Neuromelanin, Neurotoxins, Neuromelanin, Neurotoxins, Neuromelanin, Neurotoxins, Neuromelanin, Neurotoxins, Neuromelanin, Neurotoxins, Neuromelanin, Neurotoxins, Neuromelanin, Neurotoxins, Neuromelanin, Neurotoxins)
	J116_products_0: 0  -> V_ntox_ba(Neuromelanin_ntox_Fe3pl~Neuromelanin_ntox_Fe3pl)@Neuronal_cytosol fRate57() #Modifiers(Neuromelanin, Neurotoxins, Neuromelanin, Neurotoxins, Neuromelanin, Neurotoxins, Neuromelanin, Neurotoxins, Neuromelanin, Neurotoxins, Neuromelanin, Neurotoxins, Neuromelanin, Neurotoxins, Neuromelanin, Neurotoxins, Neuromelanin, Neurotoxins)
	0  -> Fe2pl()@Neuronal_cytosol arRateFe2 #rateLaw
end reaction rules
end model
