###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1507210000', 'http://identifiers.org/biomodels.db/BIOMD0000000579']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/26053019']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0006091']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 240 molecules and 175 reactions. The translated model has 136 molecules and 411 rules'
###
begin model
begin parameters
	Mg2pl_default 5.1187000000000004e+26 #original 850.0substance/volume
	Mg2pl 5.1187000000000004e+26 #original 850.0substance/volume
	Mg2pl_c1 5.1187000000000004e+26 #original 850.0substance/volume
	Mg2pl 5.1187000000000004e+26 #original 850.0substance/volume
	r1_k1 1.000000
	r2_k1 1.000000
	r3_k1 1.000000
	r4_k1 1.000000
	r5_k1 1.000000
	r6_k1 1.000000
	r7_k1 1.000000
	r8_k1 1.000000
	r9_k1 1.000000
	r10_k1 1.000000
	r11_k1 1.000000
	r12_k1 1.000000
	r13_k1 1.000000
	r14_k1 1.000000
	r15_k1 1.000000
	r16_k1 1.000000
	r17_k1 1.000000
	r18_k1 1.000000
	r19_k1 1.000000
	r20_k1 1.000000
	r21_k1 1.000000
	r22_k1 1.000000
	r23_k1 1.000000
	r24_k1 1.000000
	r25_k1 1.000000
	r26_k1 1.000000
	r27_k1 1.000000
	r28_k1 1.000000
	r29_k1 1.000000
	r30_k1 1.000000
	r31_k1 1.000000
	r31_k2 1.000000
	r32_k1 1.000000
	r33_k1 1.000000
	r34_k1 1.000000
	r35_k1 1.000000
	r36_k1 1.000000
	r37_k1 1.000000
	r38_k1 1.000000
	r39_k1 1.000000
	r40_k1 1.000000
	r41_k1 1.000000
	r42_k1 1.000000
	r43_k1 1.000000
	r44_k1 1.000000
	r45_k1 1.000000
	r46_k1 1.000000
	r47_k1 1.000000
	r48_k1 1.000000
	r49_k1 1.000000
	r50_k1 1.000000
	r51_k1 1.000000
	r52_k1 1.000000
	r53_k1 1.000000
	r54_k1 1.000000
	r55_k1 1.000000
	r56_k1 1.000000
	r57_k1 1.000000
	r58_k1 1.000000
	r59_k1 1.000000
	r60_k1 1.000000
	r61_k1 1.000000
	r62_k1 1.000000
	r63_k1 1.000000
	r64_k1 1.000000
	r65_k1 1.000000
	r66_v1 1.000000
	r66_k1 0.069000
	r67_v1 1.000000
	r67_k1 0.048000
	r68_v1 1.000000
	r68_k1 0.040000
	r69_k1 1.000000
	r70_v1 1.000000
	r70_k1 875.000000
	r71_v1 1.000000
	r71_k1 0.013000
	r72_v1 1.000000
	r72_k1 0.000380
	r73_v1 1.000000
	r73_k1 1.300000
	r74_v1 1.000000
	r74_k1 13.600000
	r75_v1 1.000000
	r75_k1 13.000000
	r76_v1 1.000000
	r76_k1 0.100000
	r77_v1 1.000000
	r77_k1 5.800000
	r78_v1 1.000000
	r78_k1 0.110000
	r79_v1 1.000000
	r79_k1 73.000000
	r80_v1 1.000000
	r80_k1 490.000000
	r81_v1 1.000000
	r81_k1 0.090000
	r82_v1 1.000000
	r82_k1 2.000000
	r83_v1 1.000000
	r83_k1 0.000213
	r84_v1 1.000000
	r84_k1 33.000000
	r85_v1 1.000000
	r85_k1 300.000000
	r86_v1 1.000000
	r86_k1 300.000000
	r87_v1 1.000000
	r87_k1 791.000000
	r88_v1 1.000000
	r88_k1 0.110000
	r89_v1 1.000000
	r89_k1 40.000000
	r90_k1 1.000000
	r91_k1 1.000000
	r92_k1 1.000000
	r93_k1 1.000000
	r94_k1 1.000000
	r95_k1 1.000000
	r96_k1 1.000000
	r97_k1 1.000000
	r98_k1 1.000000
	r99_k1 1.000000
	r100_k1 1.000000
	r101_k1 1.000000
	r102_k1 1.000000
	r103_k1 1.000000
	r104_k1 1.000000
	r105_v1 1.000000
	r105_k1 0.040000
	r106_v1 1.000000
	r106_k1 18.200000
	r107_v1 1.000000
	r107_k1 0.157000
	r108_v1 1.000000
	r108_k1 13.600000
	r109_v1 1.000000
	r109_k1 140.000000
	r110_v1 1.000000
	r110_k1 0.066000
	r111_v1 1.000000
	r111_k1 0.130000
	r112_v1 1.000000
	r112_k1 0.045000
	r113_v1 1.000000
	r113_k1 0.100000
	r114_v1 1.000000
	r114_k1 0.080000
	r115_v1 1.000000
	r115_k1 0.100000
	r116_v1 1.000000
	r116_k1 10.000000
	r117_v1 1.000000
	r117_k1 0.580000
	r118_v1 1.000000
	r118_k1 1.700000
	r119_v1 1.000000
	r119_k1 0.310000
	r120_v1 1.000000
	r120_k1 1.370000
	r121_v1 1.000000
	r121_k1 970.000000
	r122_v1 1.000000
	r122_k1 0.130000
	r123_v1 1.000000
	r123_k1 294.000000
	r124_v1 1.000000
	r124_k1 1.280000
	r125_v1 1.000000
	r125_k1 12.600000
	r126_v1 1.000000
	r126_k1 18.700000
	r127_v1 1.000000
	r127_k1 0.080000
	r128_v1 1.000000
	r128_k1 0.190000
	r129_v1 1.000000
	r129_k1 0.190000
	r130_v1 1.000000
	r130_k1 2900.000000
	r131_v1 1.000000
	r131_k1 2900.000000
	r132_v1 1.000000
	r132_k1 16.000000
	r133_v1 1.000000
	r133_k1 16.000000
	r134_v1 1.000000
	r134_k1 16.000000
	r135_v1 1.000000
	r135_k1 16.000000
	r136_v1 1.000000
	r136_k1 34.500000
	r137_v1 1.000000
	r137_k1 16.000000
	r138_v1 1.000000
	r138_k1 16.000000
	r139_v1 1.000000
	r139_k1 16.000000
	r139_v2 1.000000
	r139_k2 16.000000
	r140_v1 1.000000
	r140_k1 16.000000
	r141_v1 1.000000
	r141_k1 16.000000
	r142_v1 1.000000
	r142_k1 100.000000
	r143_v1 1.000000
	r143_k1 16.000000
	r144_v1 1.000000
	r144_k1 3.000000
	r145_v1 1.000000
	r145_k1 3.000000
	r146_v1 1.000000
	r146_k1 3.000000
	r147_v1 1.000000
	r147_k1 3.000000
	r148_v1 1.000000
	r148_k1 3.000000
	r149_v1 1.000000
	r149_k1 3.000000
	r150_v1 1.000000
	r150_k1 3.000000
	r151_v1 1.000000
	r151_k1 3.000000
	r152_v1 1.000000
	r152_k1 3.000000
	r153_v1 1.000000
	r153_k1 3.000000
	r154_v1 1.000000
	r154_k1 100.000000
	r155_v1 1.000000
	r155_k1 100.000000
	r156_v1 1.000000
	r156_k1 100.000000
	r157_v1 1.000000
	r157_k1 100.000000
	r158_v1 1.000000
	r158_k1 100.000000
	r159_v1 1.000000
	r159_k1 100.000000
	r160_v1 1.000000
	r160_k1 100.000000
	r161_v1 1.000000
	r161_k1 100.000000
	r162_v1 1.000000
	r162_k1 100.000000
	r163_v1 1.000000
	r163_k1 100.000000
	r164_v1 1.000000
	r164_k1 34.500000
	r165_v1 1.000000
	r165_k1 34.500000
	r166_v1 1.000000
	r166_k1 34.500000
	r167_v1 1.000000
	r167_k1 34.500000
	r168_v1 1.000000
	r168_k1 34.500000
	r169_v1 1.000000
	r169_k1 34.500000
	r170_v1 1.000000
	r170_k1 34.500000
	r171_v1 1.000000
	r171_k1 34.500000
	r172_v1 1.000000
	r172_k1 34.500000
	r173_v1 1.000000
	r173_k1 34.500000
	r174_v1 1.000000
	r174_k1 1.160000
	r175_v1 1.000000
	r175_k1 9.600000
end parameters
begin compartments
	#volume units: volume
	default 3 1.0
	c1 3 1.0 #mitochondria
	c2 3 1.0 #mit_inner_membrane
	c3 3 1.0 #IMS
	c4 3 1.0 #mit_outer_membrane
end compartments
begin molecule types
	CitrullylAMPintermediate()
	#^ bqbiol:isVersionOf kegg.compound:C05382, chebi:CHEBI:15721
	Sedoheptulase7P()
	#^ bqbiol:isVersionOf kegg.compound:C00356, chebi:CHEBI:15467
	HMGCoA()
	#^ bqbiol:isVersionOf kegg.compound:C00040, chebi:CHEBI:17984
	C8Acyl_CoA()
	#^ bqbiol:isVersionOf kegg.compound:C00040, chebi:CHEBI:17984
	C4Acyl_CoA()
	#^ bqbiol:isVersionOf kegg.compound:C00207, chebi:CHEBI:15347
	Acetone(co2)
	#^ bqbiol:isVersionOf kegg.compound:C00318, chebi:CHEBI:16347
	Carnitine_cyt()
	C16Ketoacyl_CoA()
	#^ bqbiol:isVersionOf kegg.compound:C00640, chebi:CHEBI:15455
	C20L_3_hydroxyacyl_CoA()
	#^ bqbiol:isVersionOf kegg.compound:C01083, chebi:CHEBI:16551
	Trehalose()
	#^ bqbiol:isVersionOf kegg.compound:C00092, chebi:CHEBI:4170
	G6P()
	s3_PGA(_1_bi~1_BI~0,_2~2~0)
	#^ bqbiol:isVersionOf kegg.compound:C03291, chebi:CHEBI:16593
	Xylulose5P()
	#^ bqbiol:isVersionOf kegg.compound:C00103, chebi:CHEBI:29042
	G1P()
	#^ bqbiol:isVersionOf kegg.compound:C00640, chebi:CHEBI:15455
	C4L_3_hydroxyacyl_CoA()
	#^ bqbiol:isVersionOf kegg.compound:C03221, chebi:CHEBI:15471
	C222_trans_enoyl_CoA()
	#^ bqbiol:isVersionOf kegg.compound:C00040, chebi:CHEBI:17984
	C14Acyl_CoA(car_mat)
	#^ bqbiol:isVersionOf kegg.compound:C00077, chebi:CHEBI:15729
	Ornithine()
	#^ bqbiol:isVersionOf kegg.compound:C00085, chebi:CHEBI:15946
	Fructose()
	#^ bqbiol:isVersionOf kegg.compound:C01352, chebi:CHEBI:17877
	FADH2()
	#^ bqbiol:isVersionOf kegg.compound:C03221, chebi:CHEBI:15471
	C62_trans_enoyl_CoA()
	#^ bqbiol:isVersionOf kegg.compound:C05984, chebi:CHEBI:1148
	D_Beta_Hydroxybutyrate()
	#^ bqbiol:isVersionOf kegg.compound:C00007, chebi:CHEBI:15379
	s1_2O2()
	#^ bqbiol:isVersionOf kegg.compound:C00640, chebi:CHEBI:15455
	C10L_3_hydroxyacyl_CoA()
	#^ bqbiol:isVersionOf kegg.compound:C03221, chebi:CHEBI:15471
	C82_trans_enoyl_CoA()
	#^ bqbiol:isVersionOf kegg.compound:C00026, chebi:CHEBI:30915
	Alpha_KG()
	#^ bqbiol:isVersionOf kegg.compound:C00004, chebi:CHEBI:16908
	s2NADH()
	#^ bqbiol:isVersionOf uniprot:Q8ND76, kegg.genes:hsa:219771
	CyC(_2~2~0)
	C16AcylCoA_cyt()
	#^ bqbiol:isVersionOf kegg.compound:C00577, chebi:CHEBI:17378
	Glyceraldehyde(dhap)
	#^ bqbiol:isVersionOf kegg.compound:C00006, chebi:CHEBI:18009
	NADPpl()
	C22Ketoacyl_CoA()
	#^ bqbiol:isVersionOf kegg.compound:C00345, chebi:CHEBI:48928
	s6PGluconate()
	#^ bqbiol:isVersionOf kegg.compound:C00010, chebi:CHEBI:15346, kegg.compound:C00010, chebi:CHEBI:15346
	CoA_SH(acetoacetylcoa)
	#^ bqbiol:isVersionOf kegg.compound:C00002, chebi:CHEBI:15422, kegg.compound:C00002, chebi:CHEBI:15422
	ATP()
	#^ bqbiol:isVersionOf kegg.compound:C00040, chebi:CHEBI:17984
	C6Acyl_CoA()
	#^ bqbiol:isVersionOf kegg.compound:C03221, chebi:CHEBI:15471
	C122_trans_enoyl_CoA()
	#^ bqbiol:isVersionOf kegg.compound:C00041, chebi:CHEBI:16977
	Alanine()
	#^ bqbiol:isVersionOf kegg.compound:C00040, chebi:CHEBI:17984
	C16Acyl_CoA(car_mat)
	#^ bqbiol:isVersionOf kegg.compound:C00124, chebi:CHEBI:4139
	Galactose(glucose)
	#^ bqbiol:isVersionOf kegg.compound:C00640, chebi:CHEBI:15455
	C6L_3_hydroxyacyl_CoA()
	s2ADP()
	#^ bqbiol:isVersionOf kegg.compound:C00640, chebi:CHEBI:15455
	C16L_3_hydroxyacyl_CoA()
	Q(Cyb~Cyb~0,FeS~FeS~0,QH2~QH2~0)
	#^ bqbiol:isVersionOf kegg.compound:C00015, chebi:CHEBI:17659
	UDP(glucose)
	C8Ketoacyl_CoA()
	Pi()
	#^ bqbiol:isVersionOf kegg.compound:C00640, chebi:CHEBI:15455
	C12L_3_hydroxyacyl_CoA()
	#^ bqbiol:isVersionOf kegg.compound:C00091, chebi:CHEBI:15380
	SCoA()
	#^ bqbiol:isVersionOf kegg.compound:C00003, chebi:CHEBI:15846
	s2NADpl()
	C14AcylCoA_cyt()
	#^ bqbiol:isVersionOf kegg.compound:C00036, chebi:CHEBI:30744
	OXALOACETATE()
	C22AcylCoA_cyt()
	#^ bqbiol:isVersionOf kegg.compound:C00040, chebi:CHEBI:17984
	C10Acyl_CoA()
	#^ bqbiol:isVersionOf kegg.compound:C00417, chebi:CHEBI:32805
	cis_Aconitate(h2o)
	#^ bqbiol:isVersionOf kegg.compound:C00004, chebi:CHEBI:16908, kegg.compound:C00004, chebi:CHEBI:16908, kegg.compound:C00004, chebi:CHEBI:16908
	NADH(_s351~_S351~0,_s381~_S381~0)
	#^ bqbiol:isVersionOf kegg.compound:C00086, chebi:CHEBI:16199
	UREA()
	#^ bqbiol:isVersionOf kegg.compound:C00182, chebi:CHEBI:28087
	Glycogen()
	#^ bqbiol:isVersionOf kegg.compound:C00327, chebi:CHEBI:16349
	Citrulline()
	Aminoacids()
	#^ bqbiol:isVersionOf kegg.compound:C00035, chebi:CHEBI:17552, kegg.compound:C00035, chebi:CHEBI:17552
	GDP()
	#^ bqbiol:isVersionOf kegg.compound:C00085, chebi:CHEBI:15946
	F6P(_1_~1_~0)
	#^ bqbiol:isVersionOf kegg.compound:C00122, chebi:CHEBI:18012
	Fumarate(arginine)
	#^ bqbiol:isVersionOf kegg.compound:C00026, chebi:CHEBI:30915
	Alphaketoacid()
	#^ bqbiol:isVersionOf kegg.compound:C03221, chebi:CHEBI:15471
	C182_trans_enoyl_CoA()
	#^ bqbiol:isVersionOf kegg.compound:C00003, chebi:CHEBI:15846, kegg.compound:C00003, chebi:CHEBI:15846
	NADpl()
	LIPOATE()
	#^ bqbiol:isVersionOf kegg.compound:C00008, chebi:CHEBI:16761, kegg.compound:C00008, chebi:CHEBI:16761
	ADP()
	#^ bqbiol:isVersionOf kegg.compound:C00074, chebi:CHEBI:18021
	PEP()
	#^ bqbiol:isVersionOf kegg.compound:C00020, chebi:CHEBI:16027
	AMP(creatinephosphate)
	C4Ketoacyl_CoA()
	#^ bqbiol:isVersionOf kegg.compound:C00062, chebi:CHEBI:16467
	Arginine(fumarate)
	#^ bqbiol:isVersionOf kegg.compound:C00279, chebi:CHEBI:48153
	Erythrose4P()
	#^ bqbiol:isVersionOf kegg.compound:C00036, chebi:CHEBI:30744
	OAA()
	car_mat(c14acyl_coa,c16acyl_coa,c18acyl_coa,c20acyl_coa,c22acyl_coa)
	#^ bqbiol:isVersionOf kegg.compound:C00010, chebi:CHEBI:15346
	Co_Ash()
	#^ bqbiol:isVersionOf kegg.compound:C00640, chebi:CHEBI:15455
	C22L_3_hydroxyacyl_CoA()
	#^ bqbiol:isVersionOf kegg.compound:C00040, chebi:CHEBI:17984
	C20Acyl_CoA(car_mat)
	#^ bqbiol:isVersionOf kegg.compound:C00089, chebi:CHEBI:17992
	Sucrose()
	#^ bqbiol:isVersionOf kegg.compound:C00061, chebi:CHEBI:17621
	FMN()
	#^ bqbiol:isVersionOf kegg.compound:C00001, chebi:CHEBI:15377
	H20()
	#^ bqbiol:isVersionOf kegg.compound:C00024, chebi:CHEBI:15351
	AcetylCoA()
	#^ bqbiol:isVersionOf kegg.compound:C00640, chebi:CHEBI:15455
	C8L_3_hydroxyacyl_CoA()
	#^ bqbiol:isVersionOf kegg.compound:C00199, chebi:CHEBI:17363
	D_Ribulose5P()
	#^ bqbiol:isVersionOf kegg.compound:C00031, chebi:CHEBI:4167
	Glucose(galactose,udp,unbranchedalpha__1_4__polymer)
	GlycogenPrimer()
	s6PGDL()
	#^ bqbiol:isVersionOf kegg.compound:C03221, chebi:CHEBI:15471
	C102_trans_enoyl_CoA()
	#^ bqbiol:isVersionOf kegg.compound:C00093, chebi:CHEBI:15978
	Glycerol3P(fa)
	C20AcylCoA_cyt()
	#^ bqbiol:isVersionOf kegg.compound:C00186, chebi:CHEBI:422
	Lactate()
	Creatinephosphate(amp)
	#^ bqbiol:isVersionOf kegg.compound:C00080, chebi:CHEBI:15378, kegg.compound:C00080, chebi:CHEBI:15378
	Hpl()
	#^ bqbiol:isVersionOf kegg.compound:C03221, chebi:CHEBI:15471
	C202_trans_enoyl_CoA()
	#^ bqbiol:isVersionOf kegg.compound:C00658, chebi:CHEBI:50998
	C42_trans_enoyl_CoA()
	#^ bqbiol:isVersionOf kegg.compound:C00013, chebi:CHEBI:29888, kegg.compound:C00013, chebi:CHEBI:29888
	PPi()
	#^ bqbiol:isVersionOf kegg.compound:C00040, chebi:CHEBI:17984
	C22Acyl_CoA(car_mat)
	#^ bqbiol:isVersionOf kegg.compound:C00049, chebi:CHEBI:17053
	Aspartate()
	#^ bqbiol:isVersionOf kegg.compound:C00711, chebi:CHEBI:6650
	Malate()
	#^ bqbiol:isVersionOf kegg.compound:C00040, chebi:CHEBI:17984
	C18Acyl_CoA(car_mat)
	C18Ketoacyl_CoA()
	NADPH()
	#^ bqbiol:isVersionOf kegg.compound:C03221, chebi:CHEBI:15471
	C162_trans_enoyl_CoA()
	C18AcylCoA_cyt()
	#^ bqbiol:isVersionOf kegg.compound:C03221, chebi:CHEBI:15471
	C142_trans_enoyl_CoA()
	#^ bqbiol:isVersionOf kegg.compound:C00311, chebi:CHEBI:30887
	Isocitrate()
	#^ bqbiol:isVersionOf kegg.genes:hsa:6704, uniprot:P22531
	s2e(s2Hpl~s2Hpl~0)
	C6Ketoacyl_CoA()
	#^ bqbiol:isVersionOf kegg.compound:C00026, chebi:CHEBI:30915
	AlphaKG()
	#^ bqbiol:isVersionOf kegg.compound:C00016, chebi:CHEBI:16238
	FAD()
	#^ bqbiol:isVersionOf ec-code:4.6.1.1, kegg.orthology:K01768, kegg.genes:hsa:109, uniprot:O60266, kegg.compound:C16088, kegg.compound:C16089
	Cya_a3()
	#^ bqbiol:isVersionOf kegg.compound:C00111, chebi:CHEBI:16108
	DHAP(glyceraldehyde)
	#^ bqbiol:isVersionOf kegg.compound:C00446, chebi:CHEBI:17973
	Galactose1P()
	#^ bqbiol:isVersionOf kegg.compound:C00061, chebi:CHEBI:17621
	FA(glycerol3p)
	#^ bqbiol:isVersionOf kegg.compound:C00640, chebi:CHEBI:15455
	C18L_3_hydroxyacyl_CoA()
	#^ bqbiol:isVersionOf kegg.compound:C00117, chebi:CHEBI:17797
	Ribose5P()
	Glutam(ate~ATE~0,ine~INE~0)
	C20Ketoacyl_CoA()
	#^ bqbiol:isVersionOf kegg.compound:C00044, chebi:CHEBI:15996
	GTP()
	#^ bqbiol:isVersionOf kegg.compound:C00169, chebi:CHEBI:17672
	Carbamoylphosphate()
	#^ bqbiol:isVersionOf kegg.compound:C00040, chebi:CHEBI:17984
	C12Acyl_CoA()
	#^ bqbiol:isVersionOf kegg.compound:C00640, chebi:CHEBI:15455
	C14L_3_hydroxyacyl_CoA()
	#^ bqbiol:isVersionOf kegg.compound:C00332, chebi:CHEBI:15345
	AcetoacetylCoA(coa_sh)
	#^ bqbiol:isVersionOf kegg.compound:C00022, chebi:CHEBI:32816
	Pyruvate()
	Unbranchedalpha__1_4__polymer(glucose)
	#^ bqbiol:isVersionOf kegg.compound:C00001, chebi:CHEBI:15377, kegg.compound:C00001, chebi:CHEBI:15377
	H2O(cis_aconitate)
	C10Ketoacyl_CoA()
	#^ bqbiol:isVersionOf kegg.compound:C00002, chebi:CHEBI:15422
	s2ATP()
	#^ bqbiol:isVersionOf kegg.compound:C00288, chebi:CHEBI:17544, kegg.compound:C01342, chebi:CHEBI:28938
	HCO3_plNH4pl()
	#^ bqbiol:isVersionOf kegg.compound:C00118, chebi:CHEBI:29052
	GA3P()
	#^ bqbiol:isVersionOf kegg.compound:C00011, chebi:CHEBI:16526, kegg.compound:C00011, chebi:CHEBI:16526
	CO2(acetone)
	#^ bqbiol:isVersionOf kegg.compound:C00005, chebi:CHEBI:16474
	NAPDH()
	#^ bqbiol:isVersionOf kegg.compound:C00042, chebi:CHEBI:15741
	Succinate()
	#^ bqbiol:isVersionOf kegg.compound:C00068, chebi:CHEBI:9532
	TPP()
	C14Ketoacyl_CoA()
	C12Ketoacyl_CoA()
end molecule types
begin seed species
	@c1:cis_Aconitate(h2o)@c1 7.8286e+24 # 13.0mol/L * 6.022e23/mol *1.0L #cis_Aconitate #s4
	@c1:car_mat(c14acyl_coa,c16acyl_coa,c18acyl_coa,c20acyl_coa,c22acyl_coa)@c1 2.5894600000000002e+25 #original 43.0substance/volume  #car_mat #s136
	@default:Xylulose5P()@default 2.5894600000000002e+23 #original 0.43substance/volume  #Xylulose5P #s188
	@c1:UREA()@c1 3.9143e+27 #original 6500.0substance/volume  #UREA #s49
	@default:Glucose(galactose,udp!209,unbranchedalpha__1_4__polymer)@default.UDP(glucose!209)@default 9.334100000000001e+25 #original 155.0substance/volume  #UDP_Glucose #s335
	@default:UDP(glucose)@default 2.46902e+25 #original 41.0substance/volume  #UDP #s199
	@default:Glycerol3P(fa!210)@default.FA(glycerol3p!210)@default 2.601504e+25 #original 43.2substance/volume  #Triglyceride #s292
	@default:Trehalose()@default 3.3723200000000002e+22 #original 0.056substance/volume  #Trehalose #s297
	@c1:TPP()@c1 1.9270400000000003e+21 #original 0.0032substance/volume  #TPP #s94
	@default:Sucrose()@default 1.08396e+24 #original 1.8substance/volume  #Sucrose #s284
	@default:Sedoheptulase7P()@default 5.3595800000000006e+23 #original 0.89substance/volume  #Sedoheptulase7P #s244
	@c1:SCoA()@c1 1.2044e+25 #original 20.0substance/volume  #SCoA #s6
	@default:Ribose5P()@default 7.94904e+24 #original 13.2substance/volume  #Ribose5P #s187
	@c2:Q(Cyb~0,FeS~0,QH2~QH2)@c2 4.4562800000000004e+24 #original 7.4substance/volume  #QH2 #s388
	@default:Pyruvate()@default 3.85408e+25 #original 64.0substance/volume  #Pyruvate #s11
	@default:Pi()@default 2.2829402000000003e+26 #original 379.1substance/volume  #Pi #s44
	@c1:Pi()@default 2.2829402000000003e+26 #original 379.1substance/volume  #Pi #s344
	@default:PPi()@default 1.08396e+24 #original 1.8substance/volume  #PPi #s200
	@c1:PPi()@default 1.08396e+24 #original 1.8substance/volume  #PPi #s363
	@default:PEP()@default 1.047828e+25 #original 17.4substance/volume  #PEP #s10
	@c1:Ornithine()@c1 5.35958e+25 #original 89.0substance/volume  #Ornithine #s34
	@default:OXALOACETATE()@default 3.67342e+25 #original 61.0substance/volume  #OXALOACETATE #s81
	@c1:OAA()@c1 3.67342e+25 #original 61.0substance/volume  #OAA #s50
	@default:NAPDH()@default 3.07122e+25 #original 51.0substance/volume  #NAPDH #s190
	@default:NADPH()@default 3.07122e+25 #original 51.0substance/volume  #NADPH #s185
	@default:NADH(_s351~0,_s381~0)@default 1.32484e+25 #original 22.0substance/volume  #NADH #s67
	@c1:NADH(_s351~_S351,_s381~0)@c1 1.32484e+25 #original 22.0substance/volume  #NADH_s351 #s351
	@c1:NADH(_s351~0,_s381~_S381)@c1 1.32484e+25 #original 22.0substance/volume  #NADH_s381 #s381
	@default:NADpl()@c1 1.44528e+25 #original 24.0substance/volume  #NADpl #s93
	@c1:NADpl()@c1 1.44528e+25 #original 24.0substance/volume  #NADpl #s355
	@c1:Malate()@c1 1.9270400000000003e+24 #original 3.2substance/volume  #Malate #s9
	@default:Glucose(galactose!201,udp,unbranchedalpha__1_4__polymer)@default.Galactose(glucose!201)@default 8.731900000000001e+23 #original 1.45substance/volume  #Lactose #s307
	@default:Lactate()@default 4.4562800000000004e+26 #original 740.0substance/volume  #Lactate #s296
	@c1:LIPOATE()@c1 4.63694e+22 #original 0.077substance/volume  #LIPOATE #s95
	@c1:Isocitrate()@c1 3.6132e+24 #original 6.0substance/volume  #Isocitrate #s52
	@c1:HMGCoA()@c1 1.5055e+23 #original 0.25substance/volume  #HMGCoA #s322
	@c1:HCO3_plNH4pl()@c1 1.4994780000000001e+28 #original 24900.0substance/volume  #HCO3_plNH4pl #s25
	@default:H2O(cis_aconitate)@c1 3.3121e+31 #original 55000000.0substance/volume  #H2O #s64
	@c1:H2O(cis_aconitate)@c1 3.3121e+31 #original 55000000.0substance/volume  #H2O #s347
	@default:H20()@default 3.3121e+31 #original 55000000.0substance/volume  #H20 #s32
	@default:Glycogen()@default 2.6075259999999998e+25 #original 43.3substance/volume  #Glycogen #s198
	@default:Glycerol3P(fa)@default 1.8066000000000001e+25 #original 30.0substance/volume  #Glycerol3P #s51
	@default:Glyceraldehyde(dhap)@default 8.888472000000001e+26 #original 1476.0substance/volume  #Glyceraldehyde #s293
	@c1:Glutam(ate~0,ine~INE)@c1 3.528892e+26 #original 586.0substance/volume  #Glutamine #s340
	@default:Glutam(ate~0,ine~INE)@c1 3.528892e+26 #original 586.0substance/volume  #Glutamine #s378
	@c1:Glutam(ate~ATE,ine~0)@c1 4.7573800000000003e+24 #original 7.9substance/volume  #Glutamate #s341
	@default:Glutam(ate~ATE,ine~0)@c1 4.7573800000000003e+24 #original 7.9substance/volume  #Glutamate #s379
	@default:Glucose(galactose,udp,unbranchedalpha__1_4__polymer)@default 2.673768e+27 #original 4440.0substance/volume  #Glucose #s71
	@default:Galactose1P()@default 1.86682e+25 #original 31.0substance/volume  #Galactose1P #s302
	@default:Galactose(glucose)@default 5.317426e+25 #original 88.3substance/volume  #Galactose #s306
	@default:GTP()@default 3.3723200000000003e+25 #original 56.0substance/volume  #GTP #s48
	@default:GDP()@default 9.033000000000001e+24 #original 15.0substance/volume  #GDP #s241
	@c1:GDP()@default 9.033000000000001e+24 #original 15.0substance/volume  #GDP #s352
	@default:GA3P()@default 2.89056e+24 #original 4.8substance/volume  #GA3P #s35
	@default:G6P()@default 1.7524020000000002e+25 #original 29.1substance/volume  #G6P #s234
	@default:G1P()@default 3.011e+24 #original 5.0substance/volume  #G1P #s195
	@c1:Fumarate(arginine)@c1 9.033e+23 #original 1.5substance/volume  #Fumarate #s40
	@default:Fructose()@default 1.86682e+25 #original 31.0substance/volume  #Fructose #s286
	@c2:FMN()@c2 4.5165e+21 #original 0.0075substance/volume  #FMN #s269
	@c1:FAD()@c1 4.5165e+22 #original 0.075substance/volume  #FAD #s356
	@default:F6P(_1_~0)@default 6.14244e+24 #original 10.2substance/volume  #F6P #s3
	@default:Glyceraldehyde(dhap!199)@default.DHAP(glyceraldehyde!199)@default 1.0237400000000002e+23 #original 0.17substance/volume  #F1P #s285
	@default:F6P(_1_~1_)@default 7.2264e+23 #original 1.2substance/volume  #F1_6P #s73
	@default:Erythrose4P()@default 1.065894e+27 #original 1770.0substance/volume  #Erythrose4P #s247
	@default:DHAP(glyceraldehyde)@default 9.39432e+24 #original 15.6substance/volume  #DHAP #s82
	@default:D_Ribulose5P()@default 9.514760000000001e+23 #original 1.58substance/volume  #D_Ribulose5P #s183
	@c1:D_Beta_Hydroxybutyrate()@c1 2.1679200000000002e+25 #original 36.0substance/volume  #D_Beta_Hydroxybutyrate #s325
	@default:CoA_SH(acetoacetylcoa)@c1 1.2044e+25 #original 20.0substance/volume  #CoA_SH #s238
	@c1:CoA_SH(acetoacetylcoa)@c1 1.2044e+25 #original 20.0substance/volume  #CoA_SH #s350
	@c1:Co_Ash()@c1 1.2044e+25 #original 20.0substance/volume  #Co_Ash #s92
	@c1:Citrulline()@c1 2.28836e+25 #original 38.0substance/volume  #Citrulline #s342
	@c1:cis_Aconitate(h2o!202)@c1.H2O(cis_aconitate!202)@c1 1.14418e+26 #original 190.0substance/volume  #Citrate #s2
	@default:Carnitine_cyt()@default 2.5894600000000002e+25 #original 43.0substance/volume  #Carnitine_cyt #s126
	@default:CO2(acetone)@c1 1.300752e+28 #original 21600.0substance/volume  #CO2 #s237
	@c1:CO2(acetone)@c1 1.300752e+28 #original 21600.0substance/volume  #CO2 #s349
	@c1:Fumarate(arginine!213)@c1.Arginine(fumarate!213)@c1 1.9270400000000003e+21 #original 0.0032substance/volume  #Arginosuccinate #s39
	@c1:Arginine(fumarate)@c1 5.9617800000000005e+25 #original 99.0substance/volume  #Arginine #s343
	@default:AlphaKG()@default 5.359580000000001e+24 #original 8.9substance/volume  #AlphaKG #s21
	@default:Alanine()@default 2.005326e+26 #original 333.0substance/volume  #Alanine #s14
	@c1:Acetone(co2)@c1 1.8066000000000001e+25 #original 30.0substance/volume  #Acetone #s324
	@c1:CO2(acetone!211)@c1.Acetone(co2!211)@c1 1.26462e+25 #original 21.0substance/volume  #Acetoacetate #s323
	@default:ATP()@c1 8.37058e+26 #original 1390.0substance/volume  #ATP #s63
	@c1:ATP()@c1 8.37058e+26 #original 1390.0substance/volume  #ATP #s345
	@c1:AMP(creatinephosphate)@c1 3.07122e+25 #original 51.0substance/volume  #AMP #s47
	@default:ADP()@default 9.6352e+25 #original 160.0substance/volume  #ADP #s46
	@c1:ADP()@default 9.6352e+25 #original 160.0substance/volume  #ADP #s346
	@default:s6PGluconate()@default 1.6379840000000002e+27 #original 2720.0substance/volume  #s6PGluconate #s182
	@default:s6PGDL()@default 4.588764e+21 #original 0.00762substance/volume  #s6PGDL #s181
	@default:s3_PGA(_1_bi~0,_2~0)@default 2.842384e+25 #original 47.2substance/volume  #s3_PGA #s8
	@default:s2NADH()@default 2.64968e+25 #original 44.0substance/volume  #s2NADH #s300
	@default:s2NADpl()@default 2.89056e+25 #original 48.0substance/volume  #s2NADpl #s301
	@c1:s2ATP()@c1 1.674116e+27 #original 2780.0substance/volume  #s2ATP #s29
	@c1:s2ADP()@c1 1.92704e+26 #original 320.0substance/volume  #s2ADP #s30
	@default:s3_PGA(_1_bi~0,_2~2)@default 8.430800000000001e+24 #original 14.0substance/volume  #s2_PGA #s75
	@c1:s1_2O2()@c1 2.095656e+27 #original 3480.0substance/volume  #s1_2O2 #s256
	@default:s3_PGA(_1_bi~1_BI,_2~0)@default 2.4088000000000004e+23 #original 0.4substance/volume  #s1_3_BiPGA #s74
	@c1:Creatinephosphate(amp)@c1 1.98726e+25 #original 33.0substance/volume  #Creatinephosphate #s124
	@c4:Creatinephosphate(amp!203)@c4.AMP(creatinephosphate!203)@c4 2.210074e+25 #original 36.7substance/volume  #Creatine #s123
end seed species
begin observables
	Species cis_Aconitate_c1 @c1:cis_Aconitate(h2o)@c1 #cis-Aconitate
	Species car_mat_c1 @c1:car_mat(c14acyl_coa,c16acyl_coa,c18acyl_coa,c20acyl_coa,c22acyl_coa)@c1 #car_mat
	Species Xylulose5P_default @default:Xylulose5P()@default #Xylulose5P
	Species Unbranchedalpha__1_4__polymer_default @default:Unbranchedalpha__1_4__polymer(glucose)@default #Unbranched alpha(1,4)polymer
	Species UREA_c1 @c1:UREA()@c1 #UREA
	Species UDP_Glucose_default @default:Glucose(galactose,udp!209,unbranchedalpha__1_4__polymer)@default.UDP(glucose!209)@default #UDP-Glucose
	Species UDP_default @default:UDP(glucose)@default #UDP
	Species Triglyceride_default @default:Glycerol3P(fa!210)@default.FA(glycerol3p!210)@default #Triglyceride
	Species Trehalose_default @default:Trehalose()@default #Trehalose
	Species TPP_c1 @c1:TPP()@c1 #TPP
	Species Sucrose_default @default:Sucrose()@default #Sucrose
	Species Succinate_c1 @c1:Succinate()@c1 #Succinate
	Species Sedoheptulase7P_default @default:Sedoheptulase7P()@default #Sedoheptulase7P
	Species SCoA_c1 @c1:SCoA()@c1 #S CoA
	Species Ribose5P_default @default:Ribose5P()@default #Ribose5P
	Species QH2_c2 @c2:Q(Cyb~0,FeS~0,QH2~QH2)@c2 #QH2
	Species Q_c2 @c2:Q(Cyb~0,FeS~0,QH2~0)@c2 #Q
	Species Pyruvate_default @default:Pyruvate()@default #Pyruvate
	Species Pi_default @default:Pi()@default #Pi
	Species Pi_c1 @c1:Pi()@default #Pi
	Species PPi_default @default:PPi()@default #PPi
	Species PPi_c1 @c1:PPi()@default #PPi
	Species PEP_default @default:PEP()@default #PEP
	Species Ornithine_c1 @c1:Ornithine()@c1 #Ornithine
	Species OXALOACETATE_default @default:OXALOACETATE()@default #OXALOACETATE
	Species OAA_c1 @c1:OAA()@c1 #OAA
	Species NAPDH_default @default:NAPDH()@default #NAPDH
	Species NADPH_default @default:NADPH()@default #NADPH
	Species NADPpl_default @default:NADPpl()@default #NADP+
	Species NADH_default @default:NADH(_s351~0,_s381~0)@default #NADH
	Species NADH_s351_c1 @c1:NADH(_s351~_S351,_s381~0)@c1 #NADH
	Species NADH_s381_c1 @c1:NADH(_s351~0,_s381~_S381)@c1 #NADH
	Species NADpl_default @default:NADpl()@c1 #NAD+
	Species NADpl_c1 @c1:NADpl()@c1 #NAD+
	Species Malate_c1 @c1:Malate()@c1 #Malate
	Species LimitDextrin_default @default:Glucose(galactose,udp,unbranchedalpha__1_4__polymer!212)@default.Unbranchedalpha__1_4__polymer(glucose!212)@default #Limit Dextrin
	Species Lactose_default @default:Glucose(galactose!201,udp,unbranchedalpha__1_4__polymer)@default.Galactose(glucose!201)@default #Lactose
	Species Lactate_default @default:Lactate()@default #Lactate
	Species LIPOATE_c1 @c1:LIPOATE()@c1 #LIPOATE
	Species Isocitrate_c1 @c1:Isocitrate()@c1 #Isocitrate
	Species HMGCoA_c1 @c1:HMGCoA()@c1 #HMGCoA
	Species HCO3_plNH4pl_c1 @c1:HCO3_plNH4pl()@c1 #HCO3-+ NH4+
	Species H2O_default @default:H2O(cis_aconitate)@c1 #H2O
	Species H2O_c1 @c1:H2O(cis_aconitate)@c1 #H2O
	Species H20_default @default:H20()@default #H20
	Species Hpl_default @default:Hpl()@c1 #H+
	Species Hpl_c1 @c1:Hpl()@c1 #H+
	Species GlycogenPrimer_default @default:GlycogenPrimer()@default #Glycogen Primer
	Species Glycogen_default @default:Glycogen()@default #Glycogen
	Species Glycerol3P_default @default:Glycerol3P(fa)@default #Glycerol3P
	Species Glyceraldehyde_default @default:Glyceraldehyde(dhap)@default #Glyceraldehyde
	Species Glutamine_c1 @c1:Glutam(ate~0,ine~INE)@c1 #Glutamine
	Species Glutamine_default @default:Glutam(ate~0,ine~INE)@c1 #Glutamine
	Species Glutamate_c1 @c1:Glutam(ate~ATE,ine~0)@c1 #Glutamate
	Species Glutamate_default @default:Glutam(ate~ATE,ine~0)@c1 #Glutamate
	Species Glucose_default @default:Glucose(galactose,udp,unbranchedalpha__1_4__polymer)@default #Glucose
	Species Galactose1P_default @default:Galactose1P()@default #Galactose1P
	Species Galactose_default @default:Galactose(glucose)@default #Galactose
	Species GTP_default @default:GTP()@default #GTP
	Species GDP_default @default:GDP()@default #GDP
	Species GDP_c1 @c1:GDP()@default #GDP
	Species GA3P_default @default:GA3P()@default #GA3P
	Species G6P_default @default:G6P()@default #G6P
	Species G1P_default @default:G1P()@default #G1P
	Species Fumarate_c1 @c1:Fumarate(arginine)@c1 #Fumarate
	Species Fructose_default @default:Fructose()@default #Fructose
	Species FeS_c1 @c1:Q(Cyb~0,FeS~FeS,QH2~0)@c2 #FeS
	Species FeS_c2 @c2:Q(Cyb~0,FeS~FeS,QH2~0)@c2 #FeS
	Species FMN_c2 @c2:FMN()@c2 #FMN
	Species FADH2_c1 @c1:FADH2()@c1 #FADH2
	Species FAD_c1 @c1:FAD()@c1 #FAD
	Species FA_default @default:FA(glycerol3p)@default #FA
	Species F6P_default @default:F6P(_1_~0)@default #F6P
	Species F1P_default @default:Glyceraldehyde(dhap!199)@default.DHAP(glyceraldehyde!199)@default #F1P
	Species F1_6P_default @default:F6P(_1_~1_)@default #F1,6P
	Species Erythrose4P_default @default:Erythrose4P()@default #Erythrose4P
	Species DHAP_default @default:DHAP(glyceraldehyde)@default #DHAP
	Species D_Ribulose5P_default @default:D_Ribulose5P()@default #D-Ribulose5P
	Species D_Beta_Hydroxybutyrate_c1 @c1:D_Beta_Hydroxybutyrate()@c1 #D-Beta-Hydroxybutyrate
	Species Cyb_c2 @c2:Q(Cyb~Cyb,FeS~0,QH2~0)@c2 #Cyb
	Species Cya_a3_c2 @c2:Cya_a3()@c2 #Cya-a3
	Species CyC2_c2 @c2:CyC(_2~2)@c2 #CyC2
	Species CyC_c2 @c2:CyC(_2~0)@c2 #CyC
	Species CoA_SH_default @default:CoA_SH(acetoacetylcoa)@c1 #CoA-SH
	Species CoA_SH_c1 @c1:CoA_SH(acetoacetylcoa)@c1 #CoA-SH
	Species Co_Ash_c1 @c1:Co_Ash()@c1 #Co-Ash
	Species CitrullylAMPintermediate_c1 @c1:CitrullylAMPintermediate()@c1 #Citrullyl AMP intermediate
	Species Citrulline_c1 @c1:Citrulline()@c1 #Citrulline
	Species Citrate_c1 @c1:cis_Aconitate(h2o!202)@c1.H2O(cis_aconitate!202)@c1 #Citrate
	Species Carnitine_cyt_default @default:Carnitine_cyt()@default #Carnitine_cyt
	Species Carbamoylphosphate_c1 @c1:Carbamoylphosphate()@c1 #Carbamoyl phosphate
	Species CO2_default @default:CO2(acetone)@c1 #CO2
	Species CO2_c1 @c1:CO2(acetone)@c1 #CO2
	Species C8Acyl_CoA_c1 @c1:C8Acyl_CoA()@c1 #C8Acyl-CoA
	Species C8L_3_hydroxyacyl_CoA_c1 @c1:C8L_3_hydroxyacyl_CoA()@c1 #C8 L-3-hydroxyacyl-CoA
	Species C8Ketoacyl_CoA_c1 @c1:C8Ketoacyl_CoA()@c1 #C8 Ketoacyl-CoA
	Species C82_trans_enoyl_CoA_c1 @c1:C82_trans_enoyl_CoA()@c1 #C8 2-trans-enoyl-CoA
	Species C6Acyl_CoA_c1 @c1:C6Acyl_CoA()@c1 #C6Acyl-CoA
	Species C6L_3_hydroxyacyl_CoA_c1 @c1:C6L_3_hydroxyacyl_CoA()@c1 #C6 L-3-hydroxyacyl-CoA
	Species C6Ketoacyl_CoA_c1 @c1:C6Ketoacyl_CoA()@c1 #C6 Ketoacyl-CoA
	Species C62_trans_enoyl_CoA_c1 @c1:C62_trans_enoyl_CoA()@c1 #C6 2-trans-enoyl-CoA
	Species C4Acyl_CoA_c1 @c1:C4Acyl_CoA()@c1 #C4Acyl-CoA
	Species C4L_3_hydroxyacyl_CoA_c1 @c1:C4L_3_hydroxyacyl_CoA()@c1 #C4 L-3-hydroxyacyl-CoA
	Species C4Ketoacyl_CoA_c1 @c1:C4Ketoacyl_CoA()@c1 #C4 Ketoacyl-CoA
	Species C42_trans_enoyl_CoA_c1 @c1:C42_trans_enoyl_CoA()@c1 #C4 2-trans-enoyl-CoA
	Species C22car_ims_c3 @c3:car_mat(c14acyl_coa,c16acyl_coa,c18acyl_coa,c20acyl_coa,c22acyl_coa!204)@c1.C22Acyl_CoA(car_mat!204)@c1 #C22car_ims
	Species C22car_ims_c1 @c1:car_mat(c14acyl_coa,c16acyl_coa,c18acyl_coa,c20acyl_coa,c22acyl_coa!204)@c1.C22Acyl_CoA(car_mat!204)@c1 #C22car_ims
	Species C22Acyl_CoA_c1 @c1:C22Acyl_CoA(car_mat)@c1 #C22Acyl-CoA
	Species C22L_3_hydroxyacyl_CoA_c1 @c1:C22L_3_hydroxyacyl_CoA()@c1 #C22 L-3-hydroxyacyl-CoA
	Species C22Ketoacyl_CoA_c1 @c1:C22Ketoacyl_CoA()@c1 #C22 Ketoacyl-CoA
	Species C22AcylCoA_cyt_default @default:C22AcylCoA_cyt()@default #C22 AcylCoA_cyt
	Species C222_trans_enoyl_CoA_c1 @c1:C222_trans_enoyl_CoA()@c1 #C22 2-trans-enoyl-CoA
	Species C20car_ims_c3 @c3:car_mat(c14acyl_coa,c16acyl_coa,c18acyl_coa,c20acyl_coa!208,c22acyl_coa)@c1.C20Acyl_CoA(car_mat!208)@c1 #C20car_ims
	Species C20car_ims_c1 @c1:car_mat(c14acyl_coa,c16acyl_coa,c18acyl_coa,c20acyl_coa!208,c22acyl_coa)@c1.C20Acyl_CoA(car_mat!208)@c1 #C20car_ims
	Species C20Acyl_CoA_c1 @c1:C20Acyl_CoA(car_mat)@c1 #C20Acyl-CoA
	Species C20L_3_hydroxyacyl_CoA_c1 @c1:C20L_3_hydroxyacyl_CoA()@c1 #C20 L-3-hydroxyacyl-CoA
	Species C20Ketoacyl_CoA_c1 @c1:C20Ketoacyl_CoA()@c1 #C20 Ketoacyl-CoA
	Species C20AcylCoA_cyt_default @default:C20AcylCoA_cyt()@default #C20 AcylCoA_cyt
	Species C202_trans_enoyl_CoA_c1 @c1:C202_trans_enoyl_CoA()@c1 #C20 2-trans-enoyl-CoA
	Species C18car_ims_c3 @c3:car_mat(c14acyl_coa,c16acyl_coa,c18acyl_coa!207,c20acyl_coa,c22acyl_coa)@c1.C18Acyl_CoA(car_mat!207)@c1 #C18car_ims
	Species C18car_ims_c1 @c1:car_mat(c14acyl_coa,c16acyl_coa,c18acyl_coa!207,c20acyl_coa,c22acyl_coa)@c1.C18Acyl_CoA(car_mat!207)@c1 #C18car_ims
	Species C18Acyl_CoA_c1 @c1:C18Acyl_CoA(car_mat)@c1 #C18Acyl-CoA
	Species C18L_3_hydroxyacyl_CoA_c1 @c1:C18L_3_hydroxyacyl_CoA()@c1 #C18 L-3-hydroxyacyl-CoA
	Species C18Ketoacyl_CoA_c1 @c1:C18Ketoacyl_CoA()@c1 #C18 Ketoacyl-CoA
	Species C18AcylCoA_cyt_default @default:C18AcylCoA_cyt()@default #C18 AcylCoA_cyt
	Species C182_trans_enoyl_CoA_c1 @c1:C182_trans_enoyl_CoA()@c1 #C18 2-trans-enoyl-CoA
	Species C16car_ims_c3 @c3:car_mat(c14acyl_coa,c16acyl_coa!206,c18acyl_coa,c20acyl_coa,c22acyl_coa)@c1.C16Acyl_CoA(car_mat!206)@c1 #C16car_ims
	Species C16car_ims_c1 @c1:car_mat(c14acyl_coa,c16acyl_coa!206,c18acyl_coa,c20acyl_coa,c22acyl_coa)@c1.C16Acyl_CoA(car_mat!206)@c1 #C16car_ims
	Species C16Acyl_CoA_c1 @c1:C16Acyl_CoA(car_mat)@c1 #C16Acyl-CoA
	Species C16L_3_hydroxyacyl_CoA_c1 @c1:C16L_3_hydroxyacyl_CoA()@c1 #C16 L-3-hydroxyacyl-CoA
	Species C16Ketoacyl_CoA_c1 @c1:C16Ketoacyl_CoA()@c1 #C16 Ketoacyl-CoA
	Species C16AcylCoA_cyt_default @default:C16AcylCoA_cyt()@default #C16 AcylCoA_cyt
	Species C162_trans_enoyl_CoA_c1 @c1:C162_trans_enoyl_CoA()@c1 #C16 2-trans-enoyl-CoA
	Species C14car_ims_c3 @c3:car_mat(c14acyl_coa!205,c16acyl_coa,c18acyl_coa,c20acyl_coa,c22acyl_coa)@c1.C14Acyl_CoA(car_mat!205)@c1 #C14car_ims
	Species C14car_ims_c1 @c1:car_mat(c14acyl_coa!205,c16acyl_coa,c18acyl_coa,c20acyl_coa,c22acyl_coa)@c1.C14Acyl_CoA(car_mat!205)@c1 #C14car_ims
	Species C14Acyl_CoA_c1 @c1:C14Acyl_CoA(car_mat)@c1 #C14Acyl-CoA
	Species C14L_3_hydroxyacyl_CoA_c1 @c1:C14L_3_hydroxyacyl_CoA()@c1 #C14 L-3-hydroxyacyl-CoA
	Species C14Ketoacyl_CoA_c1 @c1:C14Ketoacyl_CoA()@c1 #C14 Ketoacyl-CoA
	Species C14AcylCoA_cyt_default @default:C14AcylCoA_cyt()@default #C14 AcylCoA_cyt
	Species C142_trans_enoyl_CoA_c1 @c1:C142_trans_enoyl_CoA()@c1 #C14 2-trans-enoyl-CoA
	Species C12Acyl_CoA_c1 @c1:C12Acyl_CoA()@c1 #C12Acyl-CoA
	Species C12L_3_hydroxyacyl_CoA_c1 @c1:C12L_3_hydroxyacyl_CoA()@c1 #C12 L-3-hydroxyacyl-CoA
	Species C12Ketoacyl_CoA_c1 @c1:C12Ketoacyl_CoA()@c1 #C12 Ketoacyl-CoA
	Species C122_trans_enoyl_CoA_c1 @c1:C122_trans_enoyl_CoA()@c1 #C12 2-trans-enoyl-CoA
	Species C10Acyl_CoA_c1 @c1:C10Acyl_CoA()@c1 #C10Acyl-CoA
	Species C10L_3_hydroxyacyl_CoA_c1 @c1:C10L_3_hydroxyacyl_CoA()@c1 #C10 L-3-hydroxyacyl-CoA
	Species C10Ketoacyl_CoA_c1 @c1:C10Ketoacyl_CoA()@c1 #C10 Ketoacyl-CoA
	Species C102_trans_enoyl_CoA_c1 @c1:C102_trans_enoyl_CoA()@c1 #C10 2-trans-enoyl-CoA
	Species Aspartate_c1 @c1:Aspartate()@c1 #Aspartate
	Species Arginosuccinate_c1 @c1:Fumarate(arginine!213)@c1.Arginine(fumarate!213)@c1 #Arginosuccinate
	Species Arginine_c1 @c1:Arginine(fumarate)@c1 #Arginine
	Species Aminoacids_default @default:Aminoacids()@default #Amino acids
	Species Alpha_KG_c1 @c1:Alpha_KG()@c1 #Alpha-KG
	Species Alphaketoacid_default @default:Alphaketoacid()@default #Alpha keto acid
	Species AlphaKG_default @default:AlphaKG()@default #Alpha KG
	Species Alanine_default @default:Alanine()@default #Alanine
	Species AcetylCoA_c1 @c1:AcetylCoA()@c1 #AcetylCoA
	Species Acetone_c1 @c1:Acetone(co2)@c1 #Acetone
	Species AcetoacetylCoA_c1 @c1:AcetoacetylCoA(coa_sh)@c1 #AcetoacetylCoA
	Species Acetoacetate_c1 @c1:CO2(acetone!211)@c1.Acetone(co2!211)@c1 #Acetoacetate
	Species ATP_default @default:ATP()@c1 #ATP
	Species ATP_c1 @c1:ATP()@c1 #ATP
	Species AMP_c1 @c1:AMP(creatinephosphate)@c1 #AMP
	Species ADP_default @default:ADP()@default #ADP
	Species ADP_c1 @c1:ADP()@default #ADP
	Species ACoA_c1 @c1:CoA_SH(acetoacetylcoa!200)@c1.AcetoacetylCoA(coa_sh!200)@c1 #A CoA
	Species s6PGluconate_default @default:s6PGluconate()@default #6PGluconate
	Species s6PGDL_default @default:s6PGDL()@default #6PGDL
	Species s3_PGA_default @default:s3_PGA(_1_bi~0,_2~0)@default #3-PGA
	Species s2e_c2 @c2:s2e(s2Hpl~0)@c2 #2e
	Species s2NADH_default @default:s2NADH()@default #2NADH
	Species s2NADpl_default @default:s2NADpl()@default #2NAD+
	Species s2Hpl_c1 @c1:s2e(s2Hpl~s2Hpl)@c3 #2H+
	Species s2Hpl_c3 @c3:s2e(s2Hpl~s2Hpl)@c3 #2H+
	Species s2ATP_c1 @c1:s2ATP()@c1 #2ATP
	Species s2ADP_c1 @c1:s2ADP()@c1 #2ADP
	Species s2_PGA_default @default:s3_PGA(_1_bi~0,_2~2)@default #2-PGA
	Species s1_2O2_c1 @c1:s1_2O2()@c1 #1/2O2
	Species s1_3_BiPGA_default @default:s3_PGA(_1_bi~1_BI,_2~0)@default #1,3-BiPGA
	Species Creatinephosphate_c1 @c1:Creatinephosphate(amp)@c1 #Creatine phosphate
	Species Creatine_c4 @c4:Creatinephosphate(amp!203)@c4.AMP(creatinephosphate!203)@c4 #Creatine
end observables
begin functions
	fRate65() = 1.0*Galactose1P_default/(Galactose1P_default + 0.069)
	fRate66() = 1.0*Glucose_default/(Glucose_default + 0.048)
	fRate67() = 1.0/(Glutamine_c1 + 0.04)
	fRate69() = 1.0*Succinate_c1/(Succinate_c1 + 875.0)
	fRate70() = 1.0*Fumarate_c1/(Fumarate_c1 + 0.013)
	fRate71() = 1.0*Malate_c1/(Malate_c1 + 0.00038)
	fRate72() = 1.0*F1_6P_default/(F1_6P_default + 1.3)
	fRate73() = 1.0/(GA3P_default + 13.6)
	fRate74() = 1.0*HCO3_plNH4pl_c1/(HCO3_plNH4pl_c1 + 13.0)
	fRate75() = 1.0/(s3_PGA_default + 0.1)
	fRate76() = 1.0*PEP_default/(PEP_default + 5.8)
	fRate77() = 1.0*ACoA_c1/(ACoA_c1 + 0.11)
	fRate78() = 1.0*Isocitrate_c1/(Isocitrate_c1 + 73.0)
	fRate79() = 1.0*Alpha_KG_c1/(Alpha_KG_c1 + 490.0)
	fRate80() = 1.0*SCoA_c1/(SCoA_c1 + 0.09)
	fRate81() = 1.0*G6P_default/(G6P_default + 2.0)
	fRate82() = 1.0/(G6P_default + 0.000213)
	fRate83() = 1.0*s1_3_BiPGA_default/(s1_3_BiPGA_default + 33.0)
	fRate84() = 1.0*s1_3_BiPGA_default/(s1_3_BiPGA_default + 300.0)
	fRate85() = 1.0/(s2_PGA_default + 300.0)
	fRate86() = 1.0*OXALOACETATE_default/(OXALOACETATE_default + 791.0)
	fRate87() = 1.0*Pyruvate_default/(Pyruvate_default + 0.11)
	fRate88() = 1.0*Pyruvate_default/(Pyruvate_default + 40.0)
	fRate104() = 1.0*G6P_default/(G6P_default + 0.04)
	fRate105() = 1.0*s6PGDL_default/(s6PGDL_default + 18.2)
	fRate106() = 1.0*s6PGluconate_default/(s6PGluconate_default + 0.157)
	fRate107() = 1.0/(D_Ribulose5P_default + 13.6)
	fRate108() = 1.0/(Ribose5P_default + 140.0)
	fRate109() = 1.0*G1P_default/(G1P_default + 0.066)
	fRate110() = 1.0*GA3P_default/(GA3P_default + 0.13)
	fRate111() = 1.0/(G6P_default + 0.045)
	fRate112() = 1.0/(Glycogen_default + 0.1)
	fRate113() = 1.0/(LimitDextrin_default + 0.08)
	fRate114() = 1.0*Unbranchedalpha__1_4__polymer_default/(Unbranchedalpha__1_4__polymer_default + 0.1)
	fRate115() = 1.0*Sucrose_default/(Sucrose_default + 10.0)
	fRate116() = 1.0*Fructose_default/(Fructose_default + 0.58)
	fRate117() = 1.0/(F1P_default + 1.7)
	fRate118() = 1.0*Glyceraldehyde_default/(Glyceraldehyde_default + 0.31)
	fRate119() = 1.0*Trehalose_default/(Trehalose_default + 1.37)
	fRate120() = 1.0*Galactose_default/(Galactose_default + 970.0)
	fRate121() = 1.0/(UDP_Glucose_default + 0.13)
	fRate122() = 1.0*AcetoacetylCoA_c1/(AcetoacetylCoA_c1 + 294.0)
	fRate123() = 1.0/(Acetoacetate_c1 + 1.28)
	fRate124() = 1.0*Acetoacetate_c1/(Acetoacetate_c1 + 12.6)
	fRate125() = 1.0*Acetoacetate_c1/(Acetoacetate_c1 + 18.7)
	fRate126() = 1.0/(GlycogenPrimer_default + 0.08)
	fRate127() = 1.0*Xylulose5P_default/(Xylulose5P_default + 0.19)
	fRate128() = 1.0*Xylulose5P_default/(Xylulose5P_default + 0.19)
	fRate129() = 1.0/(Citrate_c1 + 2900.0)
	fRate130() = 1.0*cis_Aconitate_c1/(cis_Aconitate_c1 + 2900.0)
	fRate131() = 1.0*C22Ketoacyl_CoA_c1/(C22Ketoacyl_CoA_c1 + 16.0)
	fRate132() = 1.0*C20Ketoacyl_CoA_c1/(C20Ketoacyl_CoA_c1 + 16.0)
	fRate133() = 1.0*C18Ketoacyl_CoA_c1/(C18Ketoacyl_CoA_c1 + 16.0)
	fRate134() = 1.0*C16Ketoacyl_CoA_c1/(C16Ketoacyl_CoA_c1 + 16.0)
	fRate135() = 1.0*C14Ketoacyl_CoA_c1/(C14Ketoacyl_CoA_c1 + 34.5)
	fRate136() = 1.0*C12Ketoacyl_CoA_c1/(C12Ketoacyl_CoA_c1 + 16.0)
	fRate137() = 1.0*C10Ketoacyl_CoA_c1/(C10Ketoacyl_CoA_c1 + 16.0)
	fRate138() = 1.0*C8Ketoacyl_CoA_c1/(C8Ketoacyl_CoA_c1 + 16.0)
	fRate139() = 1.0*C6Ketoacyl_CoA_c1/(C6Ketoacyl_CoA_c1 + 16.0)
	fRate140() = 1.0/(ACoA_c1 + 16.0)
	fRate141() = 1.0*AcetoacetylCoA_c1/(AcetoacetylCoA_c1 + 100.0)
	fRate142() = 1.0*C4Ketoacyl_CoA_c1/(C4Ketoacyl_CoA_c1 + 16.0)
	fRate143() = 1.0*C22Acyl_CoA_c1/(C22Acyl_CoA_c1 + 3.0)
	fRate144() = 1.0*C20Acyl_CoA_c1/(C20Acyl_CoA_c1 + 3.0)
	fRate145() = 1.0*C18Acyl_CoA_c1/(C18Acyl_CoA_c1 + 3.0)
	fRate146() = 1.0*C16Acyl_CoA_c1/(C16Acyl_CoA_c1 + 3.0)
	fRate147() = 1.0*C14Acyl_CoA_c1/(C14Acyl_CoA_c1 + 3.0)
	fRate148() = 1.0*C12Acyl_CoA_c1/(C12Acyl_CoA_c1 + 3.0)
	fRate149() = 1.0*C10Acyl_CoA_c1/(C10Acyl_CoA_c1 + 3.0)
	fRate150() = 1.0*C8Acyl_CoA_c1/(C8Acyl_CoA_c1 + 3.0)
	fRate151() = 1.0*C6Acyl_CoA_c1/(C6Acyl_CoA_c1 + 3.0)
	fRate152() = 1.0*C4Acyl_CoA_c1/(C4Acyl_CoA_c1 + 3.0)
	fRate153() = 1.0*C222_trans_enoyl_CoA_c1/(C222_trans_enoyl_CoA_c1 + 100.0)
	fRate154() = 1.0*C202_trans_enoyl_CoA_c1/(C202_trans_enoyl_CoA_c1 + 100.0)
	fRate155() = 1.0*C182_trans_enoyl_CoA_c1/(C182_trans_enoyl_CoA_c1 + 100.0)
	fRate156() = 1.0*C162_trans_enoyl_CoA_c1/(C162_trans_enoyl_CoA_c1 + 100.0)
	fRate157() = 1.0*C142_trans_enoyl_CoA_c1/(C142_trans_enoyl_CoA_c1 + 100.0)
	fRate158() = 1.0*C122_trans_enoyl_CoA_c1/(C122_trans_enoyl_CoA_c1 + 100.0)
	fRate159() = 1.0*C102_trans_enoyl_CoA_c1/(C102_trans_enoyl_CoA_c1 + 100.0)
	fRate160() = 1.0*C82_trans_enoyl_CoA_c1/(C82_trans_enoyl_CoA_c1 + 100.0)
	fRate161() = 1.0*C62_trans_enoyl_CoA_c1/(C62_trans_enoyl_CoA_c1 + 100.0)
	fRate162() = 1.0*C42_trans_enoyl_CoA_c1/(C42_trans_enoyl_CoA_c1 + 100.0)
	fRate163() = 1.0*C22L_3_hydroxyacyl_CoA_c1/(C22L_3_hydroxyacyl_CoA_c1 + 34.5)
	fRate164() = 1.0*C20L_3_hydroxyacyl_CoA_c1/(C20L_3_hydroxyacyl_CoA_c1 + 34.5)
	fRate165() = 1.0*C18L_3_hydroxyacyl_CoA_c1/(C18L_3_hydroxyacyl_CoA_c1 + 34.5)
	fRate166() = 1.0*C16L_3_hydroxyacyl_CoA_c1/(C16L_3_hydroxyacyl_CoA_c1 + 34.5)
	fRate167() = 1.0*C14L_3_hydroxyacyl_CoA_c1/(C14L_3_hydroxyacyl_CoA_c1 + 34.5)
	fRate168() = 1.0*C12L_3_hydroxyacyl_CoA_c1/(C12L_3_hydroxyacyl_CoA_c1 + 34.5)
	fRate169() = 1.0*C10L_3_hydroxyacyl_CoA_c1/(C10L_3_hydroxyacyl_CoA_c1 + 34.5)
	fRate170() = 1.0*C8L_3_hydroxyacyl_CoA_c1/(C8L_3_hydroxyacyl_CoA_c1 + 34.5)
	fRate171() = 1.0*C6L_3_hydroxyacyl_CoA_c1/(C6L_3_hydroxyacyl_CoA_c1 + 34.5)
	fRate172() = 1.0*C4L_3_hydroxyacyl_CoA_c1/(C4L_3_hydroxyacyl_CoA_c1 + 34.5)
	fRate173() = 1.0*Creatinephosphate_c1/(Creatinephosphate_c1 + 1.16)
	fRate174() = 1.0/(Creatine_c4 + 9.6)
end functions
begin reaction rules
	re99: Pyruvate()@default -> Alanine()@default r1_k1 #Modifiers(s11)
	re7: Glutam(ate~0,ine~INE)@c1 -> HCO3_plNH4pl()@c1 r2_k1 #Modifiers(s340)
	re8: Glutam(ate~ATE,ine~0)@c1 -> HCO3_plNH4pl()@c1 r3_k1 #Modifiers(s341)
	re14: Arginine(fumarate)@c1 -> Ornithine()@c1 r4_k1 #Modifiers(s343)
	re37: F6P(_1_~1_)@default -> GA3P()@default r5_k1 #Modifiers(s73)
	re11: Citrulline()@c1 + ATP()@c1 -> CitrullylAMPintermediate()@c1 + ADP()@c1 r6_k1 #Modifiers(s342, s345)
	re12: CitrullylAMPintermediate()@c1 + Aspartate()@c1 + ATP()@c1 -> Fumarate(arginine!213)@c1.Arginine(fumarate!213)@c1 + AMP(creatinephosphate)@c1 + PPi()@c1 r7_k1 #Modifiers(s38, s23, s345)
	re81: Glyceraldehyde(dhap)@default -> Glycerol3P(fa)@default r8_k1 #Modifiers(s293)
	re85: Lactate()@default + NADH(_s351~0,_s381~0)@default -> Glucose(galactose,udp,unbranchedalpha__1_4__polymer)@default + NADpl()@default r9_k1 #Modifiers(s296, s67)
	re27: F6P(_1_~0)@default + ATP()@default -> F6P(_1_~1_)@default + ADP()@default r10_k1 #Modifiers(s3, s63)
	re36: s3_PGA(_1_bi~0,_2~0)@default + ATP()@default -> s3_PGA(_1_bi~1_BI,_2~0)@default + ADP()@default r11_k1 #Modifiers(s8, s63)
	re40: GA3P()@default + Pi()@default + NADpl()@default -> s3_PGA(_1_bi~1_BI,_2~0)@default + NADH(_s351~0,_s381~0)@default + Hpl()@default r12_k1 #Modifiers(s35, s44, s93)
	re38: F6P(_1_~1_)@default -> DHAP(glyceraldehyde)@default r13_k1 #Modifiers(s73)
	re49: Glucose(galactose,udp!209,unbranchedalpha__1_4__polymer)@default.UDP(glucose!209)@default -> GlycogenPrimer()@default r14_k1 #Modifiers(s335)
	re68: CyC(_2~0)@c2 -> Cya_a3()@c2 r15_k1 #Modifiers(s262)
	re70: s1_2O2()@c1 -> Cya_a3()@c2 r16_k1 #Modifiers(s256)
	re71: H2O(cis_aconitate)@c1 -> Cya_a3()@c2 r17_k1 #Modifiers(s347)
	re76: s2e(s2Hpl~s2Hpl)@c1 -> Cya_a3()@c2 r18_k1 #Modifiers(s358)
	re63: Q(Cyb~0,FeS~FeS,QH2~0)@c1 -> s2e(s2Hpl~0)@c2 r19_k1 #Modifiers(s374)
	re75: s2e(s2Hpl~s2Hpl)@c1 -> s2e(s2Hpl~0)@c2 r20_k1 #Modifiers(s358)
	re67: CyC(_2~2)@c2 -> CyC(_2~0)@c2 r21_k1 #Modifiers(s263)
	re65: Q(Cyb~0,FeS~0,QH2~QH2)@c2 -> CyC(_2~2)@c2 r22_k1 #Modifiers(s388)
	re61: Q(Cyb~0,FeS~0,QH2~QH2)@c2 -> Q(Cyb~Cyb,FeS~0,QH2~0)@c2 r23_k1 #Modifiers(s388)
	re69: s2e(s2Hpl~s2Hpl)@c1 -> Q(Cyb~0,FeS~0,QH2~0)@c2 r24_k1 #Modifiers(s358)
	re59: Q(Cyb~0,FeS~FeS,QH2~0)@c2 + FADH2()@c1 -> Q(Cyb~0,FeS~0,QH2~0)@c2 + FAD()@c1 r25_k1 #Modifiers(s377, s353)
	re77: NADH(_s351~0,_s381~_S381)@c1 -> FMN()@c2 r26_k1 #Modifiers(s381)
	re82: Glycerol3P(fa)@default + FA(glycerol3p)@default -> Glycerol3P(fa!210)@default.FA(glycerol3p!210)@default r27_k1 #Modifiers(s51, s53)
	re86: Pyruvate()@default -> Lactate()@default r28_k1 #Modifiers(s11)
	re90: Glucose(galactose!201,udp,unbranchedalpha__1_4__polymer)@default.Galactose(glucose!201)@default -> Galactose(glucose)@default + Glucose(galactose,udp,unbranchedalpha__1_4__polymer)@default r29_k1 #Modifiers(s307)
	re93: HMGCoA()@c1 -> CO2(acetone!211)@c1.Acetone(co2!211)@c1 + CoA_SH(acetoacetylcoa!200)@c1.AcetoacetylCoA(coa_sh!200)@c1 r30_k1 #Modifiers(s322)
	re1: Glutam(ate~0,ine~INE)@default -> Glutam(ate~0,ine~INE)@c1 r31_k2 #Modifiers(s378)
	re10: Citrulline()@c1 -> Citrulline()@c1 r32_k1 #Modifiers(s342)
	re9: Ornithine()@c1 + Carbamoylphosphate()@c1 -> Citrulline()@c1 + Pi()@c1 r33_k1 #Modifiers(s34, s33)
	re24: Fumarate(arginine!213)@c1.Arginine(fumarate!213)@c1 -> Arginine(fumarate)@c1 + Fumarate(arginine)@c1 r34_k1 #Modifiers(s39)
	re13: Arginine(fumarate)@c1 + H2O(cis_aconitate)@c1 -> Arginine(fumarate)@c1 + UREA()@c1 r35_k1 #Modifiers(s343, s347)
	re150: C22Ketoacyl_CoA()@c1 -> CoA_SH(acetoacetylcoa!200)@c1.AcetoacetylCoA(coa_sh!200)@c1 r36_k1 #Modifiers(s37)
	re151: C20Ketoacyl_CoA()@c1 -> CoA_SH(acetoacetylcoa!200)@c1.AcetoacetylCoA(coa_sh!200)@c1 r37_k1 #Modifiers(s66)
	re152: C6Ketoacyl_CoA()@c1 -> CoA_SH(acetoacetylcoa!200)@c1.AcetoacetylCoA(coa_sh!200)@c1 r38_k1 #Modifiers(s116)
	re153: C18Ketoacyl_CoA()@c1 -> CoA_SH(acetoacetylcoa!200)@c1.AcetoacetylCoA(coa_sh!200)@c1 r39_k1 #Modifiers(s80)
	re154: C8Ketoacyl_CoA()@c1 -> CoA_SH(acetoacetylcoa!200)@c1.AcetoacetylCoA(coa_sh!200)@c1 r40_k1 #Modifiers(s111)
	re155: C10Ketoacyl_CoA()@c1 -> CoA_SH(acetoacetylcoa!200)@c1.AcetoacetylCoA(coa_sh!200)@c1 r41_k1 #Modifiers(s108)
	re156: C16Ketoacyl_CoA()@c1 -> CoA_SH(acetoacetylcoa!200)@c1.AcetoacetylCoA(coa_sh!200)@c1 r42_k1 #Modifiers(s89)
	re157: C14Ketoacyl_CoA()@c1 -> CoA_SH(acetoacetylcoa!200)@c1.AcetoacetylCoA(coa_sh!200)@c1 r43_k1 #Modifiers(s100)
	re158: C12Ketoacyl_CoA()@c1 -> CoA_SH(acetoacetylcoa!200)@c1.AcetoacetylCoA(coa_sh!200)@c1 r44_k1 #Modifiers(s103)
	re100: FADH2()@c1 -> FADH2()@c1 r45_k1 #Modifiers(s353)
	re78: FMN()@c2 -> NADpl()@c1 r46_k1 #Modifiers(s269)
	re104: NADpl()@c1 -> NADpl()@c1 r47_k1 #Modifiers(s355)
	re105: NADpl()@c1 -> NADpl()@c1 r48_k1 #Modifiers(s355)
	re106: NADpl()@c1 -> NADpl()@c1 r49_k1 #Modifiers(s355)
	re108: NADpl()@c1 -> NADpl()@c1 r50_k1 #Modifiers(s355)
	re107: FAD()@c1 -> FAD()@c1 r51_k1 #Modifiers(s356)
	re62: Q(Cyb~Cyb,FeS~0,QH2~0)@c2 -> Q(Cyb~0,FeS~FeS,QH2~0)@c1 r52_k1 #Modifiers(s265)
	re58: FMN()@c2 -> Q(Cyb~0,FeS~FeS,QH2~0)@c2 r53_k1 #Modifiers(s269)
	re66: Q(Cyb~0,FeS~FeS,QH2~0)@c2 -> Q(Cyb~0,FeS~FeS,QH2~0)@c2 r54_k1 #Modifiers(s377)
	re5: Alanine()@default + AlphaKG()@default -> Glutam(ate~ATE,ine~0)@default + Alphaketoacid()@default r55_k1 #Modifiers(s14, s21)
	re2: Aminoacids()@default + Alphaketoacid()@default -> Glutam(ate~ATE,ine~0)@default + AlphaKG()@default r56_k1 #Modifiers(s12, s17)
	re101: NADH(_s351~_S351,_s381~0)@c1 -> NADH(_s351~0,_s381~_S381)@c1 r57_k1 #Modifiers(s351)
	re102: NADH(_s351~_S351,_s381~0)@c1 -> NADH(_s351~0,_s381~_S381)@c1 r58_k1 #Modifiers(s351)
	re103: NADH(_s351~_S351,_s381~0)@c1 -> NADH(_s351~0,_s381~_S381)@c1 r59_k1 #Modifiers(s351)
	re109: NADH(_s351~_S351,_s381~0)@c1 -> NADH(_s351~0,_s381~_S381)@c1 r60_k1 #Modifiers(s351)
	re60: Q(Cyb~0,FeS~0,QH2~0)@c2 -> Q(Cyb~0,FeS~0,QH2~QH2)@c2 r61_k1 #Modifiers(s267)
	re64: s2e(s2Hpl~0)@c2 -> Q(Cyb~0,FeS~0,QH2~QH2)@c2 r62_k1 #Modifiers(s259)
	re72: FMN()@c2 -> s2e(s2Hpl~s2Hpl)@c3 r63_k1 #Modifiers(s269)
	re73: Q(Cyb~0,FeS~0,QH2~QH2)@c2 -> s2e(s2Hpl~s2Hpl)@c3 r64_k1 #Modifiers(s388)
	re74: Q(Cyb~0,FeS~0,QH2~QH2)@c2 -> s2e(s2Hpl~s2Hpl)@c3 r65_k1 #Modifiers(s388)
	re89_reactants_0: 0  -> Galactose1P()@default -1*(fRate65()) #Modifiers(s13, s302)
	re89_reactants_1: 0  -> s2NADpl()@default -1*(fRate65()) #Modifiers(s13, s302)
	re89_products_0: 0  -> Glucose(galactose,udp!209,unbranchedalpha__1_4__polymer)@default.UDP(glucose!209)@default fRate65() #Modifiers(s13, s302)
	re89_products_1: 0  -> s2NADH()@default fRate65() #Modifiers(s13, s302)
	re89_products_2: 0  -> Hpl()@default fRate65() #Modifiers(s13, s302)
	re25_reactants_0: 0  -> Glucose(galactose,udp,unbranchedalpha__1_4__polymer)@default -1*(fRate66()) #Modifiers(s16, s71)
	re25_reactants_1: 0  -> ATP()@default -1*(fRate66()) #Modifiers(s16, s71)
	re25_products_0: 0  -> G6P()@default fRate66() #Modifiers(s16, s71)
	re25_products_1: 0  -> ADP()@default fRate66() #Modifiers(s16, s71)
	re4: Glutam(ate~0,ine~INE)@c1 -> Glutam(ate~ATE,ine~0)@c1 fRate67() #Modifiers(s18, s340)
	re3: Glutam(ate~ATE,ine~0)@default + OAA()@c1 -> Glutam(ate~ATE,ine~0)@c1 + Aspartate()@c1 r69_k1 #Modifiers(s24, s379, s50)
	re20_reactants_0: 0  -> Succinate()@c1 -1*(fRate69()) #Modifiers(s26, s7)
	re20_reactants_1: 0  -> FAD()@c1 -1*(fRate69()) #Modifiers(s26, s7)
	re20_products_0: 0  -> Fumarate(arginine)@c1 fRate69() #Modifiers(s26, s7)
	re20_products_1: 0  -> FADH2()@c1 fRate69() #Modifiers(s26, s7)
	re21_reactants_0: 0  -> Fumarate(arginine)@c1 -1*(fRate70()) #Modifiers(s27, s40)
	re21_reactants_1: 0  -> H2O(cis_aconitate)@c1 -1*(fRate70()) #Modifiers(s27, s40)
	re21_products_0: 0  -> Malate()@c1 fRate70() #Modifiers(s27, s40)
	re22_reactants_0: 0  -> Malate()@c1 -1*(fRate71()) #Modifiers(s28, s9)
	re22_reactants_1: 0  -> NADpl()@c1 -1*(fRate71()) #Modifiers(s28, s9)
	re22_products_0: 0  -> OAA()@c1 fRate71() #Modifiers(s28, s9)
	re22_products_1: 0  -> NADH(_s351~_S351,_s381~0)@c1 fRate71() #Modifiers(s28, s9)
	re22_products_2: 0  -> Hpl()@c1 fRate71() #Modifiers(s28, s9)
	re33_reactants_0: 0  -> F6P(_1_~1_)@default -1*(fRate72()) #Modifiers(s31, s73)
	re33_reactants_1: 0  -> H2O(cis_aconitate)@default -1*(fRate72()) #Modifiers(s31, s73)
	re33_products_0: 0  -> F6P(_1_~0)@default fRate72() #Modifiers(s31, s73)
	re33_products_1: 0  -> Pi()@default fRate72() #Modifiers(s31, s73)
	re39: GA3P()@default -> DHAP(glyceraldehyde)@default fRate73() #Modifiers(s36, s35)
	re6_reactants_0: 0  -> HCO3_plNH4pl()@c1 -1*(fRate74()) #Modifiers(s41, s25)
	re6_reactants_1: 0  -> s2ATP()@c1 -1*(fRate74()) #Modifiers(s41, s25)
	re6_products_0: 0  -> Carbamoylphosphate()@c1 fRate74() #Modifiers(s41, s25)
	re6_products_1: 0  -> s2ADP()@c1 fRate74() #Modifiers(s41, s25)
	re29: s3_PGA(_1_bi~0,_2~0)@default -> s3_PGA(_1_bi~0,_2~2)@default fRate75() #Modifiers(s43, s8)
	re31_reactants_0: 0  -> PEP()@default -1*(fRate76()) #Modifiers(s45, s10)
	re31_reactants_1: 0  -> ADP()@default -1*(fRate76()) #Modifiers(s45, s10)
	re31_products_0: 0  -> Pyruvate()@default fRate76() #Modifiers(s45, s10)
	re31_products_1: 0  -> ATP()@default fRate76() #Modifiers(s45, s10)
	re15_reactants_0: 0  -> CoA_SH(acetoacetylcoa!200)@c1.AcetoacetylCoA(coa_sh!200)@c1 -1*(fRate77()) #Modifiers(s54, s348)
	re15_reactants_1: 0  -> CO2(acetone)@c1 -1*(fRate77()) #Modifiers(s54, s348)
	re15_reactants_2: 0  -> OAA()@c1 -1*(fRate77()) #Modifiers(s54, s348)
	re15_reactants_3: 0  -> H2O(cis_aconitate)@c1 -1*(fRate77()) #Modifiers(s54, s348)
	re15_products_0: 0  -> cis_Aconitate(h2o!202)@c1.H2O(cis_aconitate!202)@c1 fRate77() #Modifiers(s54, s348)
	re15_products_1: 0  -> CoA_SH(acetoacetylcoa)@c1 fRate77() #Modifiers(s54, s348)
	re23_reactants_0: 0  -> Isocitrate()@c1 -1*(fRate78()) #Modifiers(s56, s52)
	re23_reactants_1: 0  -> NADpl()@c1 -1*(fRate78()) #Modifiers(s56, s52)
	re23_products_0: 0  -> Alpha_KG()@c1 fRate78() #Modifiers(s56, s52)
	re23_products_1: 0  -> CO2(acetone)@c1 fRate78() #Modifiers(s56, s52)
	re23_products_2: 0  -> NADH(_s351~_S351,_s381~0)@c1 fRate78() #Modifiers(s56, s52)
	re23_products_3: 0  -> Hpl()@c1 fRate78() #Modifiers(s56, s52)
	re18_reactants_0: 0  -> Alpha_KG()@c1 -1*(fRate79()) #Modifiers(s57, s5)
	re18_reactants_1: 0  -> CoA_SH(acetoacetylcoa)@c1 -1*(fRate79()) #Modifiers(s57, s5)
	re18_reactants_2: 0  -> NADpl()@c1 -1*(fRate79()) #Modifiers(s57, s5)
	re18_products_0: 0  -> SCoA()@c1 fRate79() #Modifiers(s57, s5)
	re18_products_1: 0  -> CO2(acetone)@c1 fRate79() #Modifiers(s57, s5)
	re18_products_2: 0  -> NADH(_s351~_S351,_s381~0)@c1 fRate79() #Modifiers(s57, s5)
	re18_products_3: 0  -> Hpl()@c1 fRate79() #Modifiers(s57, s5)
	re19_reactants_0: 0  -> SCoA()@c1 -1*(fRate80()) #Modifiers(s58, s6)
	re19_reactants_1: 0  -> GDP()@c1 -1*(fRate80()) #Modifiers(s58, s6)
	re19_products_0: 0  -> Succinate()@c1 fRate80() #Modifiers(s58, s6)
	re19_products_1: 0  -> ATP()@c1 fRate80() #Modifiers(s58, s6)
	re19_products_2: 0  -> CoA_SH(acetoacetylcoa)@c1 fRate80() #Modifiers(s58, s6)
	re32_reactants_0: 0  -> G6P()@default -1*(fRate81()) #Modifiers(s77, s234)
	re32_reactants_1: 0  -> H20()@default -1*(fRate81()) #Modifiers(s77, s234)
	re32_products_0: 0  -> Glucose(galactose,udp,unbranchedalpha__1_4__polymer)@default fRate81() #Modifiers(s77, s234)
	re32_products_1: 0  -> Pi()@default fRate81() #Modifiers(s77, s234)
	re26: G6P()@default -> F6P(_1_~0)@default fRate82() #Modifiers(s79, s234)
	re41_reactants_0: 0  -> s3_PGA(_1_bi~1_BI,_2~0)@default -1*(fRate83()) #Modifiers(s85, s74)
	re41_reactants_1: 0  -> NADH(_s351~0,_s381~0)@default -1*(fRate83()) #Modifiers(s85, s74)
	re41_reactants_2: 0  -> Hpl()@default -1*(fRate83()) #Modifiers(s85, s74)
	re41_products_0: 0  -> GA3P()@default fRate83() #Modifiers(s85, s74)
	re41_products_1: 0  -> Pi()@default fRate83() #Modifiers(s85, s74)
	re41_products_2: 0  -> NADpl()@default fRate83() #Modifiers(s85, s74)
	re28_reactants_0: 0  -> s3_PGA(_1_bi~1_BI,_2~0)@default -1*(fRate84()) #Modifiers(s86, s333, s74)
	re28_reactants_1: 0  -> ADP()@default -1*(fRate84()) #Modifiers(s86, s333, s74)
	re28_products_0: 0  -> s3_PGA(_1_bi~0,_2~0)@default fRate84() #Modifiers(s86, s333, s74)
	re28_products_1: 0  -> ATP()@default fRate84() #Modifiers(s86, s333, s74)
	re30: s3_PGA(_1_bi~0,_2~2)@default -> PEP()@default fRate85() #Modifiers(s87, s75)
	re35_reactants_0: 0  -> OXALOACETATE()@default -1*(fRate86()) #Modifiers(s88, s81)
	re35_reactants_1: 0  -> GDP()@default -1*(fRate86()) #Modifiers(s88, s81)
	re35_products_0: 0  -> PEP()@default fRate86() #Modifiers(s88, s81)
	re35_products_1: 0  -> GTP()@default fRate86() #Modifiers(s88, s81)
	re34_reactants_0: 0  -> Pyruvate()@default -1*(fRate87()) #Modifiers(s90, s11)
	re34_reactants_1: 0  -> ATP()@default -1*(fRate87()) #Modifiers(s90, s11)
	re34_products_0: 0  -> OXALOACETATE()@default fRate87() #Modifiers(s90, s11)
	re34_products_1: 0  -> ADP()@default fRate87() #Modifiers(s90, s11)
	re42_reactants_0: 0  -> Pyruvate()@default -1*(fRate88()) #Modifiers(s91, s357, s11)
	re42_reactants_1: 0  -> TPP()@c1 -1*(fRate88()) #Modifiers(s91, s357, s11)
	re42_reactants_2: 0  -> Co_Ash()@c1 -1*(fRate88()) #Modifiers(s91, s357, s11)
	re42_reactants_3: 0  -> NADpl()@c1 -1*(fRate88()) #Modifiers(s91, s357, s11)
	re42_reactants_4: 0  -> FAD()@c1 -1*(fRate88()) #Modifiers(s91, s357, s11)
	re42_reactants_5: 0  -> LIPOATE()@c1 -1*(fRate88()) #Modifiers(s91, s357, s11)
	re42_products_0: 0  -> CoA_SH(acetoacetylcoa!200)@c1.AcetoacetylCoA(coa_sh!200)@c1 fRate88() #Modifiers(s91, s357, s11)
	re42_products_1: 0  -> NADH(_s351~_S351,_s381~0)@c1 fRate88() #Modifiers(s91, s357, s11)
	re42_products_2: 0  -> Hpl()@c1 fRate88() #Modifiers(s91, s357, s11)
	re164: car_mat(c14acyl_coa,c16acyl_coa,c18acyl_coa,c20acyl_coa,c22acyl_coa!204)@c3.C22Acyl_CoA(car_mat!204)@c3 -> car_mat(c14acyl_coa,c16acyl_coa,c18acyl_coa,c20acyl_coa,c22acyl_coa!204)@c1.C22Acyl_CoA(car_mat!204)@c1 r90_k1 #Modifiers(s122, s127)
	re168: car_mat(c14acyl_coa!205,c16acyl_coa,c18acyl_coa,c20acyl_coa,c22acyl_coa)@c3.C14Acyl_CoA(car_mat!205)@c3 -> car_mat(c14acyl_coa!205,c16acyl_coa,c18acyl_coa,c20acyl_coa,c22acyl_coa)@c1.C14Acyl_CoA(car_mat!205)@c1 r91_k1 #Modifiers(s122, s135)
	re167: car_mat(c14acyl_coa,c16acyl_coa!206,c18acyl_coa,c20acyl_coa,c22acyl_coa)@c3.C16Acyl_CoA(car_mat!206)@c3 -> car_mat(c14acyl_coa,c16acyl_coa!206,c18acyl_coa,c20acyl_coa,c22acyl_coa)@c1.C16Acyl_CoA(car_mat!206)@c1 r92_k1 #Modifiers(s122, s133)
	re166: car_mat(c14acyl_coa,c16acyl_coa,c18acyl_coa!207,c20acyl_coa,c22acyl_coa)@c3.C18Acyl_CoA(car_mat!207)@c3 -> car_mat(c14acyl_coa,c16acyl_coa,c18acyl_coa!207,c20acyl_coa,c22acyl_coa)@c1.C18Acyl_CoA(car_mat!207)@c1 r93_k1 #Modifiers(s122, s131)
	re165: car_mat(c14acyl_coa,c16acyl_coa,c18acyl_coa,c20acyl_coa!208,c22acyl_coa)@c3.C20Acyl_CoA(car_mat!208)@c3 -> car_mat(c14acyl_coa,c16acyl_coa,c18acyl_coa,c20acyl_coa!208,c22acyl_coa)@c1.C20Acyl_CoA(car_mat!208)@c1 r94_k1 #Modifiers(s122, s129)
	re159: C22AcylCoA_cyt()@default + Carnitine_cyt()@default -> car_mat(c14acyl_coa,c16acyl_coa,c18acyl_coa,c20acyl_coa,c22acyl_coa!204)@c3.C22Acyl_CoA(car_mat!204)@c3 + CoA_SH(acetoacetylcoa)@default r95_k1 #Modifiers(s123, s125, s126)
	re160: C20AcylCoA_cyt()@default + Carnitine_cyt()@default -> car_mat(c14acyl_coa,c16acyl_coa,c18acyl_coa,c20acyl_coa!208,c22acyl_coa)@c3.C20Acyl_CoA(car_mat!208)@c3 + CoA_SH(acetoacetylcoa)@default r96_k1 #Modifiers(s123, s128, s126)
	re161: C18AcylCoA_cyt()@default + Carnitine_cyt()@default -> car_mat(c14acyl_coa,c16acyl_coa,c18acyl_coa!207,c20acyl_coa,c22acyl_coa)@c3.C18Acyl_CoA(car_mat!207)@c3 + CoA_SH(acetoacetylcoa)@default r97_k1 #Modifiers(s123, s130, s126)
	re162: C16AcylCoA_cyt()@default + Carnitine_cyt()@default -> car_mat(c14acyl_coa,c16acyl_coa!206,c18acyl_coa,c20acyl_coa,c22acyl_coa)@c3.C16Acyl_CoA(car_mat!206)@c3 + CoA_SH(acetoacetylcoa)@default r98_k1 #Modifiers(s123, s132, s126)
	re163: C14AcylCoA_cyt()@default + Carnitine_cyt()@default -> car_mat(c14acyl_coa!205,c16acyl_coa,c18acyl_coa,c20acyl_coa,c22acyl_coa)@c3.C14Acyl_CoA(car_mat!205)@c3 + CoA_SH(acetoacetylcoa)@default r99_k1 #Modifiers(s123, s134, s126)
	re169: car_mat(c14acyl_coa,c16acyl_coa,c18acyl_coa,c20acyl_coa,c22acyl_coa!204)@c1.C22Acyl_CoA(car_mat!204)@c1 -> C22Acyl_CoA(car_mat)@c1 + car_mat(c14acyl_coa,c16acyl_coa,c18acyl_coa,c20acyl_coa,c22acyl_coa)@c1 r100_k1 #Modifiers(s124, s367)
	re170: car_mat(c14acyl_coa,c16acyl_coa,c18acyl_coa,c20acyl_coa!208,c22acyl_coa)@c1.C20Acyl_CoA(car_mat!208)@c1 -> C20Acyl_CoA(car_mat)@c1 + car_mat(c14acyl_coa,c16acyl_coa,c18acyl_coa,c20acyl_coa,c22acyl_coa)@c1 r101_k1 #Modifiers(s124, s371)
	re171: car_mat(c14acyl_coa,c16acyl_coa,c18acyl_coa!207,c20acyl_coa,c22acyl_coa)@c1.C18Acyl_CoA(car_mat!207)@c1 -> C18Acyl_CoA(car_mat)@c1 + car_mat(c14acyl_coa,c16acyl_coa,c18acyl_coa,c20acyl_coa,c22acyl_coa)@c1 r102_k1 #Modifiers(s124, s370)
	re172: car_mat(c14acyl_coa,c16acyl_coa!206,c18acyl_coa,c20acyl_coa,c22acyl_coa)@c1.C16Acyl_CoA(car_mat!206)@c1 -> C16Acyl_CoA(car_mat)@c1 + car_mat(c14acyl_coa,c16acyl_coa,c18acyl_coa,c20acyl_coa,c22acyl_coa)@c1 r103_k1 #Modifiers(s124, s369)
	re173: car_mat(c14acyl_coa!205,c16acyl_coa,c18acyl_coa,c20acyl_coa,c22acyl_coa)@c1.C14Acyl_CoA(car_mat!205)@c1 -> C14Acyl_CoA(car_mat)@c1 + car_mat(c14acyl_coa,c16acyl_coa,c18acyl_coa,c20acyl_coa,c22acyl_coa)@c1 r104_k1 #Modifiers(s124, s368)
	re43_reactants_0: 0  -> G6P()@default -1*(fRate104()) #Modifiers(s186, s333, s234)
	re43_reactants_1: 0  -> NADPpl()@default -1*(fRate104()) #Modifiers(s186, s333, s234)
	re43_products_0: 0  -> s6PGDL()@default fRate104() #Modifiers(s186, s333, s234)
	re43_products_1: 0  -> NADPH()@default fRate104() #Modifiers(s186, s333, s234)
	re44_reactants_0: 0  -> s6PGDL()@default -1*(fRate105()) #Modifiers(s189, s333, s181)
	re44_reactants_1: 0  -> H2O(cis_aconitate)@default -1*(fRate105()) #Modifiers(s189, s333, s181)
	re44_products_0: 0  -> s6PGluconate()@default fRate105() #Modifiers(s189, s333, s181)
	re45_reactants_0: 0  -> s6PGluconate()@default -1*(fRate106()) #Modifiers(s192, s182)
	re45_reactants_1: 0  -> NADPpl()@default -1*(fRate106()) #Modifiers(s192, s182)
	re45_products_0: 0  -> D_Ribulose5P()@default fRate106() #Modifiers(s192, s182)
	re45_products_1: 0  -> NAPDH()@default fRate106() #Modifiers(s192, s182)
	re45_products_2: 0  -> Hpl()@default fRate106() #Modifiers(s192, s182)
	re45_products_3: 0  -> CO2(acetone)@default fRate106() #Modifiers(s192, s182)
	re46: D_Ribulose5P()@default -> Ribose5P()@default fRate107() #Modifiers(s193, s183)
	re47: Ribose5P()@default -> Xylulose5P()@default fRate108() #Modifiers(s194, s187)
	re48_reactants_0: 0  -> G1P()@default -1*(fRate109()) #Modifiers(s201, s195)
	re48_reactants_1: 0  -> UDP(glucose)@default -1*(fRate109()) #Modifiers(s201, s195)
	re48_products_0: 0  -> Glucose(galactose,udp!209,unbranchedalpha__1_4__polymer)@default.UDP(glucose!209)@default fRate109() #Modifiers(s201, s195)
	re48_products_1: 0  -> PPi()@default fRate109() #Modifiers(s201, s195)
	re53_reactants_0: 0  -> GA3P()@default -1*(fRate110()) #Modifiers(s248, s35)
	re53_reactants_1: 0  -> Sedoheptulase7P()@default -1*(fRate110()) #Modifiers(s248, s35)
	re53_products_0: 0  -> F6P(_1_~0)@default fRate110() #Modifiers(s248, s35)
	re53_products_1: 0  -> Erythrose4P()@default fRate110() #Modifiers(s248, s35)
	re54: G6P()@default -> G1P()@default fRate111() #Modifiers(s249, s234)
	re55: Glycogen()@default -> G1P()@default + Glucose(galactose,udp,unbranchedalpha__1_4__polymer!212)@default.Unbranchedalpha__1_4__polymer(glucose!212)@default fRate112() #Modifiers(s251, s198)
	re56: Glucose(galactose,udp,unbranchedalpha__1_4__polymer!212)@default.Unbranchedalpha__1_4__polymer(glucose!212)@default -> Unbranchedalpha__1_4__polymer(glucose)@default + Glucose(galactose,udp,unbranchedalpha__1_4__polymer)@default fRate113() #Modifiers(s254, s252)
	re57_reactants_0: 0  -> Unbranchedalpha__1_4__polymer(glucose)@default -1*(fRate114()) #Modifiers(s255, s253)
	re57_reactants_1: 0  -> ATP()@default -1*(fRate114()) #Modifiers(s255, s253)
	re57_products_0: 0  -> G1P()@default fRate114() #Modifiers(s255, s253)
	re57_products_1: 0  -> ADP()@default fRate114() #Modifiers(s255, s253)
	re80_reactants_0: 0  -> Sucrose()@default -1*(fRate115()) #Modifiers(s283, s284)
	re80_reactants_1: 0  -> H2O(cis_aconitate)@default -1*(fRate115()) #Modifiers(s283, s284)
	re80_products_0: 0  -> Glucose(galactose,udp,unbranchedalpha__1_4__polymer)@default fRate115() #Modifiers(s283, s284)
	re80_products_1: 0  -> Fructose()@default fRate115() #Modifiers(s283, s284)
	re79_reactants_0: 0  -> Fructose()@default -1*(fRate116()) #Modifiers(s287, s286)
	re79_reactants_1: 0  -> ATP()@default -1*(fRate116()) #Modifiers(s287, s286)
	re79_products_0: 0  -> Glyceraldehyde(dhap!199)@default.DHAP(glyceraldehyde!199)@default fRate116() #Modifiers(s287, s286)
	re79_products_1: 0  -> ADP()@default fRate116() #Modifiers(s287, s286)
	re83: Glyceraldehyde(dhap!199)@default.DHAP(glyceraldehyde!199)@default -> DHAP(glyceraldehyde)@default + Glyceraldehyde(dhap)@default fRate117() #Modifiers(s291, s285)
	re84_reactants_0: 0  -> Glyceraldehyde(dhap)@default -1*(fRate118()) #Modifiers(s294, s293)
	re84_reactants_1: 0  -> ATP()@default -1*(fRate118()) #Modifiers(s294, s293)
	re84_products_0: 0  -> GA3P()@default fRate118() #Modifiers(s294, s293)
	re84_products_1: 0  -> ADP()@default fRate118() #Modifiers(s294, s293)
	re87_reactants_0: 0  -> Trehalose()@default -1*(fRate119()) #Modifiers(s298, s297)
	re87_reactants_1: 0  -> H2O(cis_aconitate)@default -1*(fRate119()) #Modifiers(s298, s297)
	re87_products_0: 0  -> Glucose(galactose,udp,unbranchedalpha__1_4__polymer)@default fRate119() #Modifiers(s298, s297)
	re88_reactants_0: 0  -> Galactose(glucose)@default -1*(fRate120()) #Modifiers(s305, s333, s306)
	re88_reactants_1: 0  -> ATP()@default -1*(fRate120()) #Modifiers(s305, s333, s306)
	re88_products_0: 0  -> Galactose1P()@default fRate120() #Modifiers(s305, s333, s306)
	re88_products_1: 0  -> ADP()@default fRate120() #Modifiers(s305, s333, s306)
	re91: Glucose(galactose,udp!209,unbranchedalpha__1_4__polymer)@default.UDP(glucose!209)@default -> G1P()@default fRate121() #Modifiers(s308, s335)
	re92_reactants_0: 0  -> AcetoacetylCoA(coa_sh)@c1 -1*(fRate122()) #Modifiers(s327, s321)
	re92_reactants_1: 0  -> AcetylCoA()@c1 -1*(fRate122()) #Modifiers(s327, s321)
	re92_reactants_2: 0  -> H2O(cis_aconitate)@c1 -1*(fRate122()) #Modifiers(s327, s321)
	re92_products_0: 0  -> HMGCoA()@c1 fRate122() #Modifiers(s327, s321)
	re92_products_1: 0  -> CoA_SH(acetoacetylcoa)@c1 fRate122() #Modifiers(s327, s321)
	re94: CO2(acetone!211)@c1.Acetone(co2!211)@c1 -> Acetone(co2)@c1 + CO2(acetone)@c1 fRate123() #Modifiers(s328, s323)
	re95_reactants_0: 0  -> CO2(acetone!211)@c1.Acetone(co2!211)@c1 -1*(fRate124()) #Modifiers(s330, s323)
	re95_reactants_1: 0  -> NADH(_s351~_S351,_s381~0)@c1 -1*(fRate124()) #Modifiers(s330, s323)
	re95_reactants_2: 0  -> Hpl()@c1 -1*(fRate124()) #Modifiers(s330, s323)
	re95_products_0: 0  -> D_Beta_Hydroxybutyrate()@c1 fRate124() #Modifiers(s330, s323)
	re95_products_1: 0  -> NADpl()@c1 fRate124() #Modifiers(s330, s323)
	re98_reactants_0: 0  -> CO2(acetone!211)@c1.Acetone(co2!211)@c1 -1*(fRate125()) #Modifiers(s332, s323)
	re98_reactants_1: 0  -> SCoA()@c1 -1*(fRate125()) #Modifiers(s332, s323)
	re98_products_0: 0  -> AcetoacetylCoA(coa_sh)@c1 fRate125() #Modifiers(s332, s323)
	re98_products_1: 0  -> Succinate()@c1 fRate125() #Modifiers(s332, s323)
	re50: GlycogenPrimer()@default -> Glycogen()@default fRate126() #Modifiers(s336, s203, s336, s250, s197)
	re52_reactants_0: 0  -> Xylulose5P()@default -1*(fRate127()) #Modifiers(s337, s188)
	re52_reactants_1: 0  -> Erythrose4P()@default -1*(fRate127()) #Modifiers(s337, s188)
	re52_products_0: 0  -> F6P(_1_~0)@default fRate127() #Modifiers(s337, s188)
	re52_products_1: 0  -> GA3P()@default fRate127() #Modifiers(s337, s188)
	re51_reactants_0: 0  -> Xylulose5P()@default -1*(fRate128()) #Modifiers(s337, s188)
	re51_reactants_1: 0  -> Ribose5P()@default -1*(fRate128()) #Modifiers(s337, s188)
	re51_products_0: 0  -> GA3P()@default fRate128() #Modifiers(s337, s188)
	re51_products_1: 0  -> Sedoheptulase7P()@default fRate128() #Modifiers(s337, s188)
	re16: cis_Aconitate(h2o!202)@c1.H2O(cis_aconitate!202)@c1 -> cis_Aconitate(h2o)@c1 + H2O(cis_aconitate)@c1 fRate129() #Modifiers(s354, s2)
	re17_reactants_0: 0  -> cis_Aconitate(h2o)@c1 -1*(fRate130()) #Modifiers(s354, s4)
	re17_reactants_1: 0  -> H2O(cis_aconitate)@c1 -1*(fRate130()) #Modifiers(s354, s4)
	re17_products_0: 0  -> Isocitrate()@c1 fRate130() #Modifiers(s354, s4)
	re113_reactants_0: 0  -> C22Ketoacyl_CoA()@c1 -1*(fRate131()) #Modifiers(s362, s37)
	re113_reactants_1: 0  -> CoA_SH(acetoacetylcoa)@c1 -1*(fRate131()) #Modifiers(s362, s37)
	re113_products_0: 0  -> C20Acyl_CoA(car_mat)@c1 fRate131() #Modifiers(s362, s37)
	re116_reactants_0: 0  -> C20Ketoacyl_CoA()@c1 -1*(fRate132()) #Modifiers(s362, s66)
	re116_reactants_1: 0  -> CoA_SH(acetoacetylcoa)@c1 -1*(fRate132()) #Modifiers(s362, s66)
	re116_products_0: 0  -> C18Acyl_CoA(car_mat)@c1 fRate132() #Modifiers(s362, s66)
	re120_reactants_0: 0  -> C18Ketoacyl_CoA()@c1 -1*(fRate133()) #Modifiers(s362, s80)
	re120_reactants_1: 0  -> CoA_SH(acetoacetylcoa)@c1 -1*(fRate133()) #Modifiers(s362, s80)
	re120_products_0: 0  -> C16Acyl_CoA(car_mat)@c1 fRate133() #Modifiers(s362, s80)
	re123_reactants_0: 0  -> C16Ketoacyl_CoA()@c1 -1*(fRate134()) #Modifiers(s362, s89)
	re123_reactants_1: 0  -> CoA_SH(acetoacetylcoa)@c1 -1*(fRate134()) #Modifiers(s362, s89)
	re123_products_0: 0  -> C14Acyl_CoA(car_mat)@c1 fRate134() #Modifiers(s362, s89)
	re128_reactants_0: 0  -> C14Ketoacyl_CoA()@c1 -1*(fRate135()) #Modifiers(s362, s100)
	re128_reactants_1: 0  -> CoA_SH(acetoacetylcoa)@c1 -1*(fRate135()) #Modifiers(s362, s100)
	re128_products_0: 0  -> C12Acyl_CoA()@c1 fRate135() #Modifiers(s362, s100)
	re131_reactants_0: 0  -> C12Ketoacyl_CoA()@c1 -1*(fRate136()) #Modifiers(s362, s103)
	re131_reactants_1: 0  -> CoA_SH(acetoacetylcoa)@c1 -1*(fRate136()) #Modifiers(s362, s103)
	re131_products_0: 0  -> C10Acyl_CoA()@c1 fRate136() #Modifiers(s362, s103)
	re135_reactants_0: 0  -> C10Ketoacyl_CoA()@c1 -1*(fRate137()) #Modifiers(s362, s108)
	re135_reactants_1: 0  -> CoA_SH(acetoacetylcoa)@c1 -1*(fRate137()) #Modifiers(s362, s108)
	re135_products_0: 0  -> C8Acyl_CoA()@c1 fRate137() #Modifiers(s362, s108)
	re138_reactants_0: 0  -> C8Ketoacyl_CoA()@c1 -1*(fRate138()) #Modifiers(s362, s111)
	re138_reactants_1: 0  -> CoA_SH(acetoacetylcoa)@c1 -1*(fRate138()) #Modifiers(s362, s111)
	re138_products_0: 0  -> C6Acyl_CoA()@c1 fRate138() #Modifiers(s362, s111)
	re144_reactants_0: 0  -> C6Ketoacyl_CoA()@c1 -1*(fRate139()) #Modifiers(s362, s116)
	re144_reactants_1: 0  -> CoA_SH(acetoacetylcoa)@c1 -1*(fRate139()) #Modifiers(s362, s116)
	re144_products_0: 0  -> C4Acyl_CoA()@c1 fRate139() #Modifiers(s362, s116)
	re97: CoA_SH(acetoacetylcoa!200)@c1.AcetoacetylCoA(coa_sh!200)@c1 -> AcetoacetylCoA(coa_sh)@c1 + CoA_SH(acetoacetylcoa)@c1 fRate140() #Modifiers(s362, s348)
	re96_reactants_0: 0  -> AcetoacetylCoA(coa_sh)@c1 -1*(fRate141()) #Modifiers(s362, s321)
	re96_reactants_1: 0  -> CoA_SH(acetoacetylcoa)@c1 -1*(fRate141()) #Modifiers(s362, s321)
	re96_products_0: 0  -> CoA_SH(acetoacetylcoa!200)@c1.AcetoacetylCoA(coa_sh!200)@c1 fRate141() #Modifiers(s362, s321)
	re147_reactants_0: 0  -> C4Ketoacyl_CoA()@c1 -1*(fRate142()) #Modifiers(s362, s119)
	re147_reactants_1: 0  -> CoA_SH(acetoacetylcoa)@c1 -1*(fRate142()) #Modifiers(s362, s119)
	re147_products_0: 0  -> CoA_SH(acetoacetylcoa!200)@c1.AcetoacetylCoA(coa_sh!200)@c1 fRate142() #Modifiers(s362, s119)
	re110_reactants_0: 0  -> C22Acyl_CoA(car_mat)@c1 -1*(fRate143()) #Modifiers(s364, s15)
	re110_reactants_1: 0  -> FAD()@c1 -1*(fRate143()) #Modifiers(s364, s15)
	re110_products_0: 0  -> C222_trans_enoyl_CoA()@c1 fRate143() #Modifiers(s364, s15)
	re110_products_1: 0  -> FADH2()@c1 fRate143() #Modifiers(s364, s15)
	re117_reactants_0: 0  -> C20Acyl_CoA(car_mat)@c1 -1*(fRate144()) #Modifiers(s364, s42)
	re117_reactants_1: 0  -> FAD()@c1 -1*(fRate144()) #Modifiers(s364, s42)
	re117_products_0: 0  -> C202_trans_enoyl_CoA()@c1 fRate144() #Modifiers(s364, s42)
	re117_products_1: 0  -> FADH2()@c1 fRate144() #Modifiers(s364, s42)
	re125_reactants_0: 0  -> C18Acyl_CoA(car_mat)@c1 -1*(fRate145()) #Modifiers(s364, s65)
	re125_reactants_1: 0  -> FAD()@c1 -1*(fRate145()) #Modifiers(s364, s65)
	re125_products_0: 0  -> C182_trans_enoyl_CoA()@c1 fRate145() #Modifiers(s364, s65)
	re125_products_1: 0  -> FADH2()@c1 fRate145() #Modifiers(s364, s65)
	re124_reactants_0: 0  -> C16Acyl_CoA(car_mat)@c1 -1*(fRate146()) #Modifiers(s364, s83)
	re124_reactants_1: 0  -> FAD()@c1 -1*(fRate146()) #Modifiers(s364, s83)
	re124_products_0: 0  -> C162_trans_enoyl_CoA()@c1 fRate146() #Modifiers(s364, s83)
	re124_products_1: 0  -> FADH2()@c1 fRate146() #Modifiers(s364, s83)
	re141_reactants_0: 0  -> C14Acyl_CoA(car_mat)@c1 -1*(fRate147()) #Modifiers(s364, s84)
	re141_reactants_1: 0  -> FAD()@c1 -1*(fRate147()) #Modifiers(s364, s84)
	re141_products_0: 0  -> C142_trans_enoyl_CoA()@c1 fRate147() #Modifiers(s364, s84)
	re141_products_1: 0  -> FADH2()@c1 fRate147() #Modifiers(s364, s84)
	re132_reactants_0: 0  -> C12Acyl_CoA()@c1 -1*(fRate148()) #Modifiers(s364, s101)
	re132_reactants_1: 0  -> FAD()@c1 -1*(fRate148()) #Modifiers(s364, s101)
	re132_products_0: 0  -> C122_trans_enoyl_CoA()@c1 fRate148() #Modifiers(s364, s101)
	re132_products_1: 0  -> FADH2()@c1 fRate148() #Modifiers(s364, s101)
	re140_reactants_0: 0  -> C10Acyl_CoA()@c1 -1*(fRate149()) #Modifiers(s364, s102)
	re140_reactants_1: 0  -> FAD()@c1 -1*(fRate149()) #Modifiers(s364, s102)
	re140_products_0: 0  -> C102_trans_enoyl_CoA()@c1 fRate149() #Modifiers(s364, s102)
	re140_products_1: 0  -> FADH2()@c1 fRate149() #Modifiers(s364, s102)
	re139_reactants_0: 0  -> C8Acyl_CoA()@c1 -1*(fRate150()) #Modifiers(s364, s109)
	re139_reactants_1: 0  -> FAD()@c1 -1*(fRate150()) #Modifiers(s364, s109)
	re139_products_0: 0  -> C82_trans_enoyl_CoA()@c1 fRate150() #Modifiers(s364, s109)
	re139_products_1: 0  -> FADH2()@c1 fRate150() #Modifiers(s364, s109)
	re149_reactants_0: 0  -> C6Acyl_CoA()@c1 -1*(fRate151()) #Modifiers(s364, s110)
	re149_reactants_1: 0  -> FAD()@c1 -1*(fRate151()) #Modifiers(s364, s110)
	re149_products_0: 0  -> C62_trans_enoyl_CoA()@c1 fRate151() #Modifiers(s364, s110)
	re149_products_1: 0  -> FADH2()@c1 fRate151() #Modifiers(s364, s110)
	re148_reactants_0: 0  -> C4Acyl_CoA()@c1 -1*(fRate152()) #Modifiers(s364, s117)
	re148_reactants_1: 0  -> FAD()@c1 -1*(fRate152()) #Modifiers(s364, s117)
	re148_products_0: 0  -> C42_trans_enoyl_CoA()@c1 fRate152() #Modifiers(s364, s117)
	re148_products_1: 0  -> FADH2()@c1 fRate152() #Modifiers(s364, s117)
	re111_reactants_0: 0  -> C222_trans_enoyl_CoA()@c1 -1*(fRate153()) #Modifiers(s365, s19)
	re111_reactants_1: 0  -> H2O(cis_aconitate)@c1 -1*(fRate153()) #Modifiers(s365, s19)
	re111_products_0: 0  -> C22L_3_hydroxyacyl_CoA()@c1 fRate153() #Modifiers(s365, s19)
	re114_reactants_0: 0  -> C202_trans_enoyl_CoA()@c1 -1*(fRate154()) #Modifiers(s365, s69)
	re114_reactants_1: 0  -> H2O(cis_aconitate)@c1 -1*(fRate154()) #Modifiers(s365, s69)
	re114_products_0: 0  -> C20L_3_hydroxyacyl_CoA()@c1 fRate154() #Modifiers(s365, s69)
	re118_reactants_0: 0  -> C182_trans_enoyl_CoA()@c1 -1*(fRate155()) #Modifiers(s365, s70)
	re118_reactants_1: 0  -> H2O(cis_aconitate)@c1 -1*(fRate155()) #Modifiers(s365, s70)
	re118_products_0: 0  -> C18L_3_hydroxyacyl_CoA()@c1 fRate155() #Modifiers(s365, s70)
	re121_reactants_0: 0  -> C162_trans_enoyl_CoA()@c1 -1*(fRate156()) #Modifiers(s365, s97)
	re121_reactants_1: 0  -> H2O(cis_aconitate)@c1 -1*(fRate156()) #Modifiers(s365, s97)
	re121_products_0: 0  -> C16L_3_hydroxyacyl_CoA()@c1 fRate156() #Modifiers(s365, s97)
	re126_reactants_0: 0  -> C142_trans_enoyl_CoA()@c1 -1*(fRate157()) #Modifiers(s365, s98)
	re126_reactants_1: 0  -> H2O(cis_aconitate)@c1 -1*(fRate157()) #Modifiers(s365, s98)
	re126_products_0: 0  -> C14L_3_hydroxyacyl_CoA()@c1 fRate157() #Modifiers(s365, s98)
	re129_reactants_0: 0  -> C122_trans_enoyl_CoA()@c1 -1*(fRate158()) #Modifiers(s365, s105)
	re129_reactants_1: 0  -> H2O(cis_aconitate)@c1 -1*(fRate158()) #Modifiers(s365, s105)
	re129_products_0: 0  -> C12L_3_hydroxyacyl_CoA()@c1 fRate158() #Modifiers(s365, s105)
	re133_reactants_0: 0  -> C102_trans_enoyl_CoA()@c1 -1*(fRate159()) #Modifiers(s365, s106)
	re133_reactants_1: 0  -> H2O(cis_aconitate)@c1 -1*(fRate159()) #Modifiers(s365, s106)
	re133_products_0: 0  -> C10L_3_hydroxyacyl_CoA()@c1 fRate159() #Modifiers(s365, s106)
	re136_reactants_0: 0  -> C82_trans_enoyl_CoA()@c1 -1*(fRate160()) #Modifiers(s365, s113)
	re136_reactants_1: 0  -> H2O(cis_aconitate)@c1 -1*(fRate160()) #Modifiers(s365, s113)
	re136_products_0: 0  -> C8L_3_hydroxyacyl_CoA()@c1 fRate160() #Modifiers(s365, s113)
	re142_reactants_0: 0  -> C62_trans_enoyl_CoA()@c1 -1*(fRate161()) #Modifiers(s365, s114)
	re142_reactants_1: 0  -> H2O(cis_aconitate)@c1 -1*(fRate161()) #Modifiers(s365, s114)
	re142_products_0: 0  -> C6L_3_hydroxyacyl_CoA()@c1 fRate161() #Modifiers(s365, s114)
	re145_reactants_0: 0  -> C42_trans_enoyl_CoA()@c1 -1*(fRate162()) #Modifiers(s365, s121)
	re145_reactants_1: 0  -> H2O(cis_aconitate)@c1 -1*(fRate162()) #Modifiers(s365, s121)
	re145_products_0: 0  -> C4L_3_hydroxyacyl_CoA()@c1 fRate162() #Modifiers(s365, s121)
	re112_reactants_0: 0  -> C22L_3_hydroxyacyl_CoA()@c1 -1*(fRate163()) #Modifiers(s366, s22)
	re112_reactants_1: 0  -> NADpl()@c1 -1*(fRate163()) #Modifiers(s366, s22)
	re112_products_0: 0  -> C22Ketoacyl_CoA()@c1 fRate163() #Modifiers(s366, s22)
	re112_products_1: 0  -> NADH(_s351~_S351,_s381~0)@c1 fRate163() #Modifiers(s366, s22)
	re112_products_2: 0  -> Hpl()@c1 fRate163() #Modifiers(s366, s22)
	re115_reactants_0: 0  -> C20L_3_hydroxyacyl_CoA()@c1 -1*(fRate164()) #Modifiers(s366, s68)
	re115_reactants_1: 0  -> NADpl()@c1 -1*(fRate164()) #Modifiers(s366, s68)
	re115_products_0: 0  -> C20Ketoacyl_CoA()@c1 fRate164() #Modifiers(s366, s68)
	re115_products_1: 0  -> NADH(_s351~_S351,_s381~0)@c1 fRate164() #Modifiers(s366, s68)
	re115_products_2: 0  -> Hpl()@c1 fRate164() #Modifiers(s366, s68)
	re119_reactants_0: 0  -> C18L_3_hydroxyacyl_CoA()@c1 -1*(fRate165()) #Modifiers(s366, s72)
	re119_reactants_1: 0  -> NADpl()@c1 -1*(fRate165()) #Modifiers(s366, s72)
	re119_products_0: 0  -> C18Ketoacyl_CoA()@c1 fRate165() #Modifiers(s366, s72)
	re119_products_1: 0  -> NADH(_s351~_S351,_s381~0)@c1 fRate165() #Modifiers(s366, s72)
	re119_products_2: 0  -> Hpl()@c1 fRate165() #Modifiers(s366, s72)
	re122_reactants_0: 0  -> C16L_3_hydroxyacyl_CoA()@c1 -1*(fRate166()) #Modifiers(s366, s96)
	re122_reactants_1: 0  -> NADpl()@c1 -1*(fRate166()) #Modifiers(s366, s96)
	re122_products_0: 0  -> C16Ketoacyl_CoA()@c1 fRate166() #Modifiers(s366, s96)
	re122_products_1: 0  -> NADH(_s351~_S351,_s381~0)@c1 fRate166() #Modifiers(s366, s96)
	re122_products_2: 0  -> Hpl()@c1 fRate166() #Modifiers(s366, s96)
	re127_reactants_0: 0  -> C14L_3_hydroxyacyl_CoA()@c1 -1*(fRate167()) #Modifiers(s366, s99)
	re127_reactants_1: 0  -> NADpl()@c1 -1*(fRate167()) #Modifiers(s366, s99)
	re127_products_0: 0  -> C14Ketoacyl_CoA()@c1 fRate167() #Modifiers(s366, s99)
	re127_products_1: 0  -> NADH(_s351~_S351,_s381~0)@c1 fRate167() #Modifiers(s366, s99)
	re127_products_2: 0  -> Hpl()@c1 fRate167() #Modifiers(s366, s99)
	re130_reactants_0: 0  -> C12L_3_hydroxyacyl_CoA()@c1 -1*(fRate168()) #Modifiers(s366, s104)
	re130_reactants_1: 0  -> NADpl()@c1 -1*(fRate168()) #Modifiers(s366, s104)
	re130_products_0: 0  -> C12Ketoacyl_CoA()@c1 fRate168() #Modifiers(s366, s104)
	re130_products_1: 0  -> NADH(_s351~_S351,_s381~0)@c1 fRate168() #Modifiers(s366, s104)
	re130_products_2: 0  -> Hpl()@c1 fRate168() #Modifiers(s366, s104)
	re134_reactants_0: 0  -> C10L_3_hydroxyacyl_CoA()@c1 -1*(fRate169()) #Modifiers(s366, s107)
	re134_reactants_1: 0  -> NADpl()@c1 -1*(fRate169()) #Modifiers(s366, s107)
	re134_products_0: 0  -> C10Ketoacyl_CoA()@c1 fRate169() #Modifiers(s366, s107)
	re134_products_1: 0  -> NADH(_s351~_S351,_s381~0)@c1 fRate169() #Modifiers(s366, s107)
	re134_products_2: 0  -> Hpl()@c1 fRate169() #Modifiers(s366, s107)
	re137_reactants_0: 0  -> C8L_3_hydroxyacyl_CoA()@c1 -1*(fRate170()) #Modifiers(s366, s112)
	re137_reactants_1: 0  -> NADpl()@c1 -1*(fRate170()) #Modifiers(s366, s112)
	re137_products_0: 0  -> C8Ketoacyl_CoA()@c1 fRate170() #Modifiers(s366, s112)
	re137_products_1: 0  -> NADH(_s351~_S351,_s381~0)@c1 fRate170() #Modifiers(s366, s112)
	re137_products_2: 0  -> Hpl()@c1 fRate170() #Modifiers(s366, s112)
	re143_reactants_0: 0  -> C6L_3_hydroxyacyl_CoA()@c1 -1*(fRate171()) #Modifiers(s366, s115)
	re143_reactants_1: 0  -> NADpl()@c1 -1*(fRate171()) #Modifiers(s366, s115)
	re143_products_0: 0  -> C6Ketoacyl_CoA()@c1 fRate171() #Modifiers(s366, s115)
	re143_products_1: 0  -> NADH(_s351~_S351,_s381~0)@c1 fRate171() #Modifiers(s366, s115)
	re143_products_2: 0  -> Hpl()@c1 fRate171() #Modifiers(s366, s115)
	re146_reactants_0: 0  -> C4L_3_hydroxyacyl_CoA()@c1 -1*(fRate172()) #Modifiers(s366, s120)
	re146_reactants_1: 0  -> NADpl()@c1 -1*(fRate172()) #Modifiers(s366, s120)
	re146_products_0: 0  -> C4Ketoacyl_CoA()@c1 fRate172() #Modifiers(s366, s120)
	re146_products_1: 0  -> NADH(_s351~_S351,_s381~0)@c1 fRate172() #Modifiers(s366, s120)
	re146_products_2: 0  -> Hpl()@c1 fRate172() #Modifiers(s366, s120)
	re175_reactants_0: 0  -> Creatinephosphate(amp)@c1 -1*(fRate173()) #Modifiers(s400, s124)
	re175_reactants_1: 0  -> ATP()@c1 -1*(fRate173()) #Modifiers(s400, s124)
	re175_products_0: 0  -> Creatinephosphate(amp!203)@c4.AMP(creatinephosphate!203)@c4 fRate173() #Modifiers(s400, s124)
	re182: Creatinephosphate(amp!203)@c4.AMP(creatinephosphate!203)@c4 -> Creatinephosphate(amp)@c1 + AMP(creatinephosphate)@c1 fRate174() #Modifiers(s123)
end reaction rules
end model
