###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1601290000', 'http://identifiers.org/biomodels.db/BIOMD0000000588']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/24427523']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/pubmed/16418172', 'http://identifiers.org/biomodels.db/BIOMD0000000049']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0051387', 'http://identifiers.org/go/GO:0038180']
#@BQB_HAS_PROPERTY:['urn:miriam:efo:EFO%3A0003843']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/10114']
#@BQB_OCCURS_IN:['http://identifiers.org/bto/BTO:0001009']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 76 molecules and 157 reactions. The translated model has 27 molecules and 159 rules'
###
begin model
begin parameters
	Km_104 15.657 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_105 15.657 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_106 15.657 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_107 15.657 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_108 0.02 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_109 0.02 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_39 0.1 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_40 0.1 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_41 0.1 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_42 0.1 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_43 0.1 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_44 0.1 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_45 0.1 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_58 0.02 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_59 25.641 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_60 25.641 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_61 25.641 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_62 1.0 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_63 1.0 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_64 1.0 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_70 0.01 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_71 1.0 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_72 1.0 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_81 0.16 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_82 0.16 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_83 0.16 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_84 0.16 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_85 0.16 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_86 0.16 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_87 0.16 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_88 0.16 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_89 0.16 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_90 0.16 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_91 0.16 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_92 0.16 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_93 15.657 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_94 15.657 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_95 15.657 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_96 15.657 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_97 0.02 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Km_98 0.02 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	MKP3cyt 0.018 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	MKP3nuc 0.006 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	PP2Acyt 0.24 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	PP2Anuc 0.08 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Rap1GAP 0.012 #units:MWBUILTINPREFIX_micro_MWBUILTINUNIT_molarity
	Vmax_104 180.0 #units:MWDERIVEDUNIT_1__minute
	Vmax_105 180.0 #units:MWDERIVEDUNIT_1__minute
	Vmax_106 180.0 #units:MWDERIVEDUNIT_1__minute
	Vmax_107 180.0 #units:MWDERIVEDUNIT_1__minute
	Vmax_108 3.6 #units:MWDERIVEDUNIT_1__minute
	Vmax_109 3.6 #units:MWDERIVEDUNIT_1__minute
	Vmax_39 1.2 #units:MWDERIVEDUNIT_1__minute
	Vmax_40 1.2 #units:MWDERIVEDUNIT_1__minute
	Vmax_41 1.2 #units:MWDERIVEDUNIT_1__minute
	Vmax_42 1.2 #units:MWDERIVEDUNIT_1__minute
	Vmax_43 1.2 #units:MWDERIVEDUNIT_1__minute
	Vmax_44 1.2 #units:MWDERIVEDUNIT_1__minute
	Vmax_45 1.2 #units:MWDERIVEDUNIT_1__minute
	Vmax_58 120.0 #units:MWDERIVEDUNIT_1__minute
	Vmax_59 60.0 #units:MWDERIVEDUNIT_1__minute
	Vmax_60 60.0 #units:MWDERIVEDUNIT_1__minute
	Vmax_61 60.0 #units:MWDERIVEDUNIT_1__minute
	Vmax_62 600.0 #units:MWDERIVEDUNIT_1__minute
	Vmax_63 600.0 #units:MWDERIVEDUNIT_1__minute
	Vmax_64 600.0 #units:MWDERIVEDUNIT_1__minute
	Vmax_70 2.88 #units:MWDERIVEDUNIT_1__minute
	Vmax_71 120.0 #units:MWDERIVEDUNIT_1__minute
	Vmax_72 120.0 #units:MWDERIVEDUNIT_1__minute
	Vmax_81 30.0 #units:MWDERIVEDUNIT_1__minute
	Vmax_82 30.0 #units:MWDERIVEDUNIT_1__minute
	Vmax_83 30.0 #units:MWDERIVEDUNIT_1__minute
	Vmax_84 30.0 #units:MWDERIVEDUNIT_1__minute
	Vmax_85 12.0 #units:MWDERIVEDUNIT_1__minute
	Vmax_86 12.0 #units:MWDERIVEDUNIT_1__minute
	Vmax_87 12.0 #units:MWDERIVEDUNIT_1__minute
	Vmax_88 12.0 #units:MWDERIVEDUNIT_1__minute
	Vmax_89 18.0 #units:MWDERIVEDUNIT_1__minute
	Vmax_90 18.0 #units:MWDERIVEDUNIT_1__minute
	Vmax_91 18.0 #units:MWDERIVEDUNIT_1__minute
	Vmax_92 18.0 #units:MWDERIVEDUNIT_1__minute
	Vmax_93 180.0 #units:MWDERIVEDUNIT_1__minute
	Vmax_94 180.0 #units:MWDERIVEDUNIT_1__minute
	Vmax_95 180.0 #units:MWDERIVEDUNIT_1__minute
	Vmax_96 180.0 #units:MWDERIVEDUNIT_1__minute
	Vmax_97 3.6 #units:MWDERIVEDUNIT_1__minute
	Vmax_98 3.6 #units:MWDERIVEDUNIT_1__minute
	kb_1 0.0166668 #units:MWDERIVEDUNIT_1__minute
	kb_100 4.5 #units:MWDERIVEDUNIT_1__minute
	kb_101 36.0 #units:MWDERIVEDUNIT_1__minute
	kb_102 36.0 #units:MWDERIVEDUNIT_1__minute
	kb_103 36.0 #units:MWDERIVEDUNIT_1__minute
	kb_18 12.0 #units:MWDERIVEDUNIT_1__minute
	kb_19 12.0 #units:MWDERIVEDUNIT_1__minute
	kb_20 12.0 #units:MWDERIVEDUNIT_1__minute
	kb_21 12.0 #units:MWDERIVEDUNIT_1__minute
	kb_22 12.0 #units:MWDERIVEDUNIT_1__minute
	kb_23 12.0 #units:MWDERIVEDUNIT_1__minute
	kb_24 6.0 #units:MWDERIVEDUNIT_1__minute
	kb_25 6.0 #units:MWDERIVEDUNIT_1__minute
	kb_26 6.0 #units:MWDERIVEDUNIT_1__minute
	kb_27 6.0 #units:MWDERIVEDUNIT_1__minute
	kb_46 1.008 #units:MWDERIVEDUNIT_1__minute
	kb_47 1.008 #units:MWDERIVEDUNIT_1__minute
	kb_48 12.0 #units:MWDERIVEDUNIT_1__minute
	kb_49 12.0 #units:MWDERIVEDUNIT_1__minute
	kb_50 12.0 #units:MWDERIVEDUNIT_1__minute
	kb_55 1.99999998 #units:MWDERIVEDUNIT_1__minute
	kb_56 0.0006 #units:MWDERIVEDUNIT_1__minute
	kb_65 0.12 #units:MWDERIVEDUNIT_1__minute
	kb_66 12.0 #units:MWDERIVEDUNIT_1__minute
	kb_67 12.0 #units:MWDERIVEDUNIT_1__minute
	kb_73 30.0 #units:MWDERIVEDUNIT_1__minute
	kb_74 30.0 #units:MWDERIVEDUNIT_1__minute
	kb_75 30.0 #units:MWDERIVEDUNIT_1__minute
	kb_77 4.5 #units:MWDERIVEDUNIT_1__minute
	kb_78 36.0 #units:MWDERIVEDUNIT_1__minute
	kb_79 36.0 #units:MWDERIVEDUNIT_1__minute
	kb_80 36.0 #units:MWDERIVEDUNIT_1__minute
	kf_1 0.049998 #units:MWDERIVEDUNIT_1__minute
	kf_10 0.0378 #units:MWDERIVEDUNIT_1__minute
	kf_100 600.0 #units:MWDERIVEDUNIT_1__micromolarity_minute
	kf_101 978.24 #units:MWDERIVEDUNIT_1__micromolarity_minute
	kf_102 978.24 #units:MWDERIVEDUNIT_1__micromolarity_minute
	kf_103 978.24 #units:MWDERIVEDUNIT_1__micromolarity_minute
	kf_11 0.0252 #units:MWDERIVEDUNIT_1__minute
	kf_110 6.48 #units:MWDERIVEDUNIT_1__minute
	kf_111 32.4 #units:MWDERIVEDUNIT_1__minute
	kf_112 0.48 #units:MWDERIVEDUNIT_1__minute
	kf_113 2.4 #units:MWDERIVEDUNIT_1__minute
	kf_114 3.12 #units:MWDERIVEDUNIT_1__minute
	kf_115 15.6 #units:MWDERIVEDUNIT_1__minute
	kf_116 0.42 #units:MWDERIVEDUNIT_1__minute
	kf_117 2.1 #units:MWDERIVEDUNIT_1__minute
	kf_118 0.216 #units:MWDERIVEDUNIT_1__minute
	kf_119 1.08 #units:MWDERIVEDUNIT_1__minute
	kf_12 0.0252 #units:MWDERIVEDUNIT_1__minute
	kf_120 0.1032 #units:MWDERIVEDUNIT_1__minute
	kf_121 0.516 #units:MWDERIVEDUNIT_1__minute
	kf_122 7.32 #units:MWDERIVEDUNIT_1__minute
	kf_123 36.6 #units:MWDERIVEDUNIT_1__minute
	kf_124 0.552 #units:MWDERIVEDUNIT_1__minute
	kf_125 2.76 #units:MWDERIVEDUNIT_1__minute
	kf_126 0.156 #units:MWDERIVEDUNIT_1__minute
	kf_127 0.78 #units:MWDERIVEDUNIT_1__minute
	kf_128 0.084 #units:MWDERIVEDUNIT_1__minute
	kf_129 0.42 #units:MWDERIVEDUNIT_1__minute
	kf_13 0.0252 #units:MWDERIVEDUNIT_1__minute
	kf_130 6.48 #units:MWDERIVEDUNIT_1__minute
	kf_131 32.4 #units:MWDERIVEDUNIT_1__minute
	kf_132 0.48 #units:MWDERIVEDUNIT_1__minute
	kf_133 2.4 #units:MWDERIVEDUNIT_1__minute
	kf_134 3.12 #units:MWDERIVEDUNIT_1__minute
	kf_135 15.6 #units:MWDERIVEDUNIT_1__minute
	kf_136 0.42 #units:MWDERIVEDUNIT_1__minute
	kf_137 2.1 #units:MWDERIVEDUNIT_1__minute
	kf_138 0.156 #units:MWDERIVEDUNIT_1__minute
	kf_139 0.78 #units:MWDERIVEDUNIT_1__minute
	kf_14 0.0252 #units:MWDERIVEDUNIT_1__minute
	kf_140 0.084 #units:MWDERIVEDUNIT_1__minute
	kf_141 0.42 #units:MWDERIVEDUNIT_1__minute
	kf_142 3.12 #units:MWDERIVEDUNIT_1__minute
	kf_143 15.6 #units:MWDERIVEDUNIT_1__minute
	kf_144 0.42 #units:MWDERIVEDUNIT_1__minute
	kf_145 2.1 #units:MWDERIVEDUNIT_1__minute
	kf_15 0.0252 #units:MWDERIVEDUNIT_1__minute
	kf_16 0.0252 #units:MWDERIVEDUNIT_1__minute
	kf_17 0.0252 #units:MWDERIVEDUNIT_1__minute
	kf_19 600.0 #units:MWDERIVEDUNIT_1__micromolarity_minute
	kf_20 600.0 #units:MWDERIVEDUNIT_1__micromolarity_minute
	kf_21 600.0 #units:MWDERIVEDUNIT_1__micromolarity_minute
	kf_22 600.0 #units:MWDERIVEDUNIT_1__micromolarity_minute
	kf_23 600.0 #units:MWDERIVEDUNIT_1__micromolarity_minute
	kf_24 300.0 #units:MWDERIVEDUNIT_1__micromolarity_minute
	kf_25 300.0 #units:MWDERIVEDUNIT_1__micromolarity_minute
	kf_26 300.0 #units:MWDERIVEDUNIT_1__micromolarity_minute
	kf_27 300.0 #units:MWDERIVEDUNIT_1__micromolarity_minute
	kf_28 6.0 #units:MWDERIVEDUNIT_1__minute
	kf_29 6.0 #units:MWDERIVEDUNIT_1__minute
	kf_3 60.0 #units:MWDERIVEDUNIT_1__minute
	kf_30 120.0 #units:MWDERIVEDUNIT_1__minute
	kf_31 120.0 #units:MWDERIVEDUNIT_1__minute
	kf_32 0.132 #units:MWDERIVEDUNIT_1__minute
	kf_33 0.132 #units:MWDERIVEDUNIT_1__minute
	kf_34 0.132 #units:MWDERIVEDUNIT_1__minute
	kf_35 0.132 #units:MWDERIVEDUNIT_1__minute
	kf_36 0.132 #units:MWDERIVEDUNIT_1__minute
	kf_37 0.132 #units:MWDERIVEDUNIT_1__minute
	kf_38 0.132 #units:MWDERIVEDUNIT_1__minute
	kf_4 0.0378 #units:MWDERIVEDUNIT_1__minute
	kf_46 1.8 #units:MWDERIVEDUNIT_1__micromolarity_minute
	kf_47 1.8 #units:MWDERIVEDUNIT_1__micromolarity_minute
	kf_48 600.0 #units:MWDERIVEDUNIT_1__micromolarity_minute
	kf_49 600.0 #units:MWDERIVEDUNIT_1__micromolarity_minute
	kf_5 0.0378 #units:MWDERIVEDUNIT_1__minute
	kf_50 600.0 #units:MWDERIVEDUNIT_1__micromolarity_minute
	kf_51 0.3 #units:MWDERIVEDUNIT_1__minute
	kf_52 0.3 #units:MWDERIVEDUNIT_1__minute
	kf_53 0.12 #units:MWDERIVEDUNIT_1__minute
	kf_54 0.12 #units:MWDERIVEDUNIT_1__minute
	kf_55 3.0 #units:MWDERIVEDUNIT_1__micromolarity_minute
	kf_56 0.12 #units:MWDERIVEDUNIT_1__minute
	kf_57 0.0070002 #units:MWDERIVEDUNIT_1__minute
	kf_6 0.0378 #units:MWDERIVEDUNIT_1__minute
	kf_65 60.0 #units:MWDERIVEDUNIT_1__micromolarity_minute
	kf_66 60.0 #units:MWDERIVEDUNIT_1__micromolarity_minute
	kf_67 60.0 #units:MWDERIVEDUNIT_1__micromolarity_minute
	kf_68 0.3 #units:MWDERIVEDUNIT_1__minute
	kf_69 0.006996 #units:MWDERIVEDUNIT_1__minute
	kf_7 0.0378 #units:MWDERIVEDUNIT_1__minute
	kf_73 3600.0 #units:MWDERIVEDUNIT_1__micromolarity_minute
	kf_74 3600.0 #units:MWDERIVEDUNIT_1__micromolarity_minute
	kf_75 3600.0 #units:MWDERIVEDUNIT_1__micromolarity_minute
	kf_76 9.0 #units:MWDERIVEDUNIT_1__minute
	kf_77 600.0 #units:MWDERIVEDUNIT_1__micromolarity_minute
	kf_78 978.24 #units:MWDERIVEDUNIT_1__micromolarity_minute
	kf_79 978.24 #units:MWDERIVEDUNIT_1__micromolarity_minute
	kf_8 0.0378 #units:MWDERIVEDUNIT_1__minute
	kf_80 978.24 #units:MWDERIVEDUNIT_1__micromolarity_minute
	kf_9 0.0378 #units:MWDERIVEDUNIT_1__minute
	kf_99 9.0 #units:MWDERIVEDUNIT_1__minute
	mwdfa3719d_20cc_4f14_b45e_3f097c3aff65 600.0 #units:MWDERIVEDUNIT_1__micromolarity_minute
	source_mwc2fe3668_8fb0_4cfb_b795_99057e61e290 7.2264e+24 #original 1.0mol/L
	source 7.2264e+24 #original 1.0mol/L
	r145_mw7d6fb5c7_061a_49ff_99a2_d76de2f025f7 0.000000
	r146_mw65c9272f_da7a_4626_86c0_f834524601e6 0.001283
	r147_mw4b2ef456_cb6c_46b8_919b_734f320058c1 372.000000
	r147_mw3d826840_83ab_4394_ae58_99f8d7180f29 0.003840
	r148_mw748e0940_792f_4420_8ece_0de52ecaa556 16.200000
	r148_mw87c66aa4_69ab_4cad_aa55_4b28455f804a 0.000180
	r149_mw27805dbc_be23_402e_95ec_fab51829ca51 0.000023
	r150_mw2bbef0c4_48a5_4757_8f66_81da5c6894bd 0.001925
	r151_mw307c003f_3906_4fa9_a1a8_bafaa3d0d901 83.330000
	r151_mw6208f472_c677_43ef_a590_554bc0d88d2c 1000000.000000
	r152_mw5d69c45e_20e6_4a18_b22a_b79692b9c57d 2000.000000
	r152_mw88063cbd_d06b_40bd_bbed_3f8a4a9ee082 2000.000000
	r153_mwc3897a3e_bec3_478d_9450_afc4751c2775 2000.000000
	r153_mwda0271e2_458c_4419_9c7d_8fb1bf692c13 2000.000000
	r154_mwfc8fe87e_6841_4214_9c2f_5d821794f38d 10000000.000000
	r154_mw3716109a_c83e_4fd4_911e_ccc67b036bb7 0.001000
	r155_mwd74ca4a6_566f_4161_859e_2b05bf2851fc 10000000.000000
	r155_mw924e0439_7ac5_4812_b1c2_11e46b4737b8 0.001000
	r156_mwee585562_2580_4943_bd3e_731f12217004 0.016700
	r157_mwfbeb575a_0864_4d0d_b862_240f7f6506c1 0.016700
end parameters
begin compartments
	#volume units: L
	mw3bc142df_1951_4fa9_b0a7_011c95012bbf 3 0.001 #Neuron
	mwc2fe3668_8fb0_4cfb_b795_99057e61e290 3 12.0 #Interstitial fluid
end compartments
begin molecule types
	Rap1(_gdp~_GDP~0,_gtp~_GTP~0,b_raf)
	trkaI(_deg~_DEG~0,_int~_INT~0,ngfr,ptrka)
	Shc(p~P~0,ptrka)
	Ras_GTP(Ras_GDP~Ras_GDP~0,b_raf,c_raf)
	Grb2_SOS_pShc_pTrkA()
	Crk_C3G_pFRS2_pTrkA_endo()
	Dok(p~P~0,rasgap)
	pro_TrkA()
	pTrkA(L_NGFR~L_NGFR~0,_deg~_DEG~0,_endo~_ENDO~0,frs2,shc,trkai)
	FRS2(p~P~0,ptrka)
	ERKcyt(erkcyt,mekcyt,pp~PP~0)
	SOS(grb2,p~P~0)
	B_Raf(rap1,ras_gtp)
	MEKnuc(erknuc,p~P~0,p2~P~0)
	Grb2_SOS_pShc()
	NGF(deg~DEG~0,ngfr,tz_deg)
	NGFR(NGFR_interstitial_fluid~NGFR_interstitial_fluid~0,_deg~_DEG~0,ngf,trkai)
	Crk_C3G_pFRS2_pTrkA()
	ERKnuc(erknuc,meknuc,pp~PP~0)
	Crk(c3g)
	MEKcyt(erkcyt,p~P~0,p2~P~0)
	c_Raf(ras_gtp)
	Grb2(sos)
	tz_deg(ngf,tanezumab~tanezumab~0)
	Grb2_SOS_pShc_pTrkA_endo()
	C3G(crk)
	RasGAP(dok)
end molecule types
begin seed species
	@mw3bc142df_1951_4fa9_b0a7_011c95012bbf:NGFR(NGFR_interstitial_fluid~0,_deg~0,ngf,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf 3.7272374096e+19 # 0.06189368mol/L * 6.022e23/mol *0.001L #NGFR #NGFR
	@mw3bc142df_1951_4fa9_b0a7_011c95012bbf:Shc(p~0,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf 6.022e+20 #original 1.0mol/L  #Shc #Shc
	@mw3bc142df_1951_4fa9_b0a7_011c95012bbf:FRS2(p~0,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf 6.022e+20 #original 1.0mol/L  #FRS2 #FRS2
	@mw3bc142df_1951_4fa9_b0a7_011c95012bbf:Crk(c3g!233)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.C3G(crk!233)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf 2.9990511476e+20 #original 0.4980158mol/L  #Crk_C3G #Crk_C3G
	@mw3bc142df_1951_4fa9_b0a7_011c95012bbf:Dok(p~0,rasgap)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf 1.8024038704e+20 #original 0.2993032mol/L  #Dok #Dok
	@mw3bc142df_1951_4fa9_b0a7_011c95012bbf:Dok(p~P,rasgap)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf 3.6872465120000006e+17 #original 0.000612296mol/L  #pDok #pDok
	@mw3bc142df_1951_4fa9_b0a7_011c95012bbf:Grb2(sos)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf 5.6450191868000004e+20 #original 0.9373994mol/L  #Grb2 #Grb2
	@mw3bc142df_1951_4fa9_b0a7_011c95012bbf:SOS(grb2,p~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf 2.2521906636e+19 #original 0.03739938mol/L  #SOS #SOS
	@mw3bc142df_1951_4fa9_b0a7_011c95012bbf:SOS(grb2!81,p~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Grb2(sos!81)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf 3.7698093364e+19 #original 0.06260062mol/L  #Grb2_SOS #Grb2_SOS
	@mw3bc142df_1951_4fa9_b0a7_011c95012bbf:Ras_GTP(Ras_GDP~Ras_GDP,b_raf,c_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf 6.022000000000001e+19 #original 0.1mol/L  #Ras_GDP #Ras_GDP
	@mw3bc142df_1951_4fa9_b0a7_011c95012bbf:B_Raf(rap1,ras_gtp)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf 1.2044000000000002e+20 #original 0.2mol/L  #B_Raf #B_Raf
	@mw3bc142df_1951_4fa9_b0a7_011c95012bbf:c_Raf(ras_gtp)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf 3.011e+20 #original 0.5mol/L  #c_Raf #c_Raf
	@mw3bc142df_1951_4fa9_b0a7_011c95012bbf:MEKcyt(erkcyt,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf 8.851719734000001e+19 #original 0.1469897mol/L  #MEKcyt #MEKcyt
	@mw3bc142df_1951_4fa9_b0a7_011c95012bbf:ERKcyt(erkcyt,mekcyt,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf 1.6883863334e+19 #original 0.02803697mol/L  #ERKcyt #ERKcyt
	@mw3bc142df_1951_4fa9_b0a7_011c95012bbf:MEKcyt(erkcyt!238,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf 6.751119672000001e+19 #original 0.1121076mol/L  #MEKcyt_ERKcyt #MEKcyt_ERKcyt
	@mw3bc142df_1951_4fa9_b0a7_011c95012bbf:MEKnuc(erknuc,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf 1.1690111148e+21 #original 1.941234mol/L  #MEKnuc #MEKnuc
	@mw3bc142df_1951_4fa9_b0a7_011c95012bbf:ERKnuc(erknuc,meknuc,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf 9.633989578000001e+18 #original 0.01599799mol/L  #ERKnuc #ERKnuc
	@mw3bc142df_1951_4fa9_b0a7_011c95012bbf:MEKnuc(erknuc!239,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKnuc(erknuc,meknuc!239,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf 5.0782267402e+20 #original 0.8432791mol/L  #MEKnuc_ERKnuc #MEKnuc_ERKnuc
	@mw3bc142df_1951_4fa9_b0a7_011c95012bbf:Rap1(_gdp~_GDP,_gtp~0,b_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf 1.2044000000000002e+20 #original 0.2mol/L  #Rap1_GDP #Rap1_GDP
	@mw3bc142df_1951_4fa9_b0a7_011c95012bbf:Crk(c3g)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf 3.0229488524e+20 #original 0.5019842mol/L  #Crk #Crk
	@mw3bc142df_1951_4fa9_b0a7_011c95012bbf:C3G(crk)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf 1.1948786158e+18 #original 0.001984189mol/L  #C3G #C3G
	@mw3bc142df_1951_4fa9_b0a7_011c95012bbf:Dok(p~P,rasgap!241)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.RasGAP(dok!241)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf 5.090342402e+16 #original 8.45291e-05mol/L  #pDok_RasGAP #pDok_RasGAP
	@mw3bc142df_1951_4fa9_b0a7_011c95012bbf:RasGAP(dok)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf 6.016909603400001e+19 #original 0.09991547mol/L  #RasGAP #RasGAP
	@mw3bc142df_1951_4fa9_b0a7_011c95012bbf:$pro_TrkA()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf 1.24239882e+19 #original 0.020631mol/L  #pro_TrkA #mwf82ad06a_b8aa_40fa_a532_a1da44e3425f
	@mwc2fe3668_8fb0_4cfb_b795_99057e61e290:NGFR(NGFR_interstitial_fluid~NGFR_interstitial_fluid,_deg~0,ngf,trkai)@mwc2fe3668_8fb0_4cfb_b795_99057e61e290 3.613200000000001e+19 #original 5e-06mol/L  #NGFR_interstitial_fluid #mwe979ec8f_a55c_470c_a554_9fa8013eab74
	@mwc2fe3668_8fb0_4cfb_b795_99057e61e290:NGF(deg~0,ngfr,tz_deg)@mwc2fe3668_8fb0_4cfb_b795_99057e61e290 2.1679200000000003e+20 #original 3e-05mol/L  #NGF #mw29fa4e00_a430_4f11_b62e_1bcbc0a767a0
end seed species
begin observables
	Species NGFR_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:NGFR(NGFR_interstitial_fluid~0,_deg~0,ngf,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #NGFR
	Species L_NGFR_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:pTrkA(L_NGFR~L_NGFR,_deg~0,_endo~0,frs2,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #L_NGFR
	Species pTrkA_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #pTrkA
	Species pTrkA_endo_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:pTrkA(L_NGFR~0,_deg~0,_endo~_ENDO,frs2,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #pTrkA_endo
	Species Shc_pTrkA_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2,shc!234,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Shc(p~0,ptrka!234)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #Shc_pTrkA
	Species Shc_pTrkA_endo_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:pTrkA(L_NGFR~0,_deg~0,_endo~_ENDO,frs2,shc!234,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Shc(p~0,ptrka!234)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #Shc_pTrkA_endo
	Species pShc_pTrkA_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2,shc!234,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Shc(p~P,ptrka!234)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #pShc_pTrkA
	Species pShc_pTrkA_endo_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:pTrkA(L_NGFR~0,_deg~0,_endo~_ENDO,frs2,shc!234,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Shc(p~P,ptrka!234)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #pShc_pTrkA_endo
	Species Grb2_SOS_pShc_pTrkA_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:Grb2_SOS_pShc_pTrkA()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #Grb2_SOS_pShc_pTrkA
	Species Grb2_SOS_pShc_pTrkA_endo_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:Grb2_SOS_pShc_pTrkA_endo()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #Grb2_SOS_pShc_pTrkA_endo
	Species FRS2_pTrkA_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2!235,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.FRS2(p~0,ptrka!235)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #FRS2_pTrkA
	Species FRS2_pTrkA_endo_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:pTrkA(L_NGFR~0,_deg~0,_endo~_ENDO,frs2!235,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.FRS2(p~0,ptrka!235)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #FRS2_pTrkA_endo
	Species pFRS2_pTrkA_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2!235,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.FRS2(p~P,ptrka!235)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #pFRS2_pTrkA
	Species pFRS2_pTrkA_endo_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:pTrkA(L_NGFR~0,_deg~0,_endo~_ENDO,frs2!235,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.FRS2(p~P,ptrka!235)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #pFRS2_pTrkA_endo
	Species Crk_C3G_pFRS2_pTrkA_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:Crk_C3G_pFRS2_pTrkA()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #Crk_C3G_pFRS2_pTrkA
	Species Crk_C3G_pFRS2_pTrkA_endo_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:Crk_C3G_pFRS2_pTrkA_endo()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #Crk_C3G_pFRS2_pTrkA_endo
	Species Shc_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:Shc(p~0,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #Shc
	Species Grb2_SOS_pShc_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:Grb2_SOS_pShc()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #Grb2_SOS_pShc
	Species FRS2_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:FRS2(p~0,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #FRS2
	Species Crk_C3G_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:Crk(c3g!233)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.C3G(crk!233)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #Crk_C3G
	Species Dok_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:Dok(p~0,rasgap)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #Dok
	Species pDok_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:Dok(p~P,rasgap)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #pDok
	Species Grb2_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:Grb2(sos)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #Grb2
	Species SOS_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:SOS(grb2,p~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #SOS
	Species Grb2_SOS_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:SOS(grb2!81,p~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Grb2(sos!81)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #Grb2_SOS
	Species Ras_GTP_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:Ras_GTP(Ras_GDP~0,b_raf,c_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #Ras_GTP
	Species Ras_GDP_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:Ras_GTP(Ras_GDP~Ras_GDP,b_raf,c_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #Ras_GDP
	Species B_Raf_Ras_GTP_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:Ras_GTP(Ras_GDP~0,b_raf!236,c_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.B_Raf(rap1,ras_gtp!236)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #B_Raf_Ras_GTP
	Species B_Raf_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:B_Raf(rap1,ras_gtp)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #B_Raf
	Species c_Raf_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:c_Raf(ras_gtp)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #c_Raf
	Species Rap1_GTP_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:Rap1(_gdp~0,_gtp~_GTP,b_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #Rap1_GTP
	Species ppMEKcyt_ERKcyt_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKcyt(erkcyt!238,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #ppMEKcyt_ERKcyt
	Species ppMEKcyt_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:MEKcyt(erkcyt,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #ppMEKcyt
	Species ppERKcyt_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:ERKcyt(erkcyt,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #ppERKcyt
	Species dppERKcyt_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:ERKcyt(erkcyt!246,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKcyt(erkcyt!246,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #dppERKcyt
	Species MEKcyt_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:MEKcyt(erkcyt,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #MEKcyt
	Species ERKcyt_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:ERKcyt(erkcyt,mekcyt,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #ERKcyt
	Species MEKcyt_ERKcyt_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:MEKcyt(erkcyt!238,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #MEKcyt_ERKcyt
	Species pMEKcyt_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:MEKcyt(erkcyt,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #pMEKcyt
	Species pMEKcyt_ERKcyt_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKcyt(erkcyt!238,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #pMEKcyt_ERKcyt
	Species ppMEKnuc_ERKnuc_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:ERKnuc(erknuc,meknuc!239,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKnuc(erknuc!239,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #ppMEKnuc_ERKnuc
	Species ppMEKnuc_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:MEKnuc(erknuc,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #ppMEKnuc
	Species ppERKnuc_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:ERKnuc(erknuc,meknuc,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #ppERKnuc
	Species dppERKnuc_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:ERKnuc(erknuc!247,meknuc,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKnuc(erknuc!247,meknuc,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #dppERKnuc
	Species MEKnuc_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:MEKnuc(erknuc,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #MEKnuc
	Species ERKnuc_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:ERKnuc(erknuc,meknuc,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #ERKnuc
	Species MEKnuc_ERKnuc_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:MEKnuc(erknuc!239,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKnuc(erknuc,meknuc!239,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #MEKnuc_ERKnuc
	Species pMEKnuc_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:MEKnuc(erknuc,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #pMEKnuc
	Species pMEKnuc_ERKnuc_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:ERKnuc(erknuc,meknuc!239,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKnuc(erknuc!239,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #pMEKnuc_ERKnuc
	Species c_Raf_Ras_GTP_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:Ras_GTP(Ras_GDP~0,b_raf,c_raf!237)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.c_Raf(ras_gtp!237)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #c_Raf_Ras_GTP
	Species B_Raf_Rap1_GTP_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:Rap1(_gdp~_GDP,_gtp~0,b_raf!243)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.B_Raf(rap1!243,ras_gtp)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #B_Raf_Rap1_GTP
	Species Rap1_GDP_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:Rap1(_gdp~_GDP,_gtp~0,b_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #Rap1_GDP
	Species Crk_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:Crk(c3g)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #Crk
	Species C3G_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:C3G(crk)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #C3G
	Species pDok_RasGAP_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:Dok(p~P,rasgap!241)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.RasGAP(dok!241)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #pDok_RasGAP
	Species RasGAP_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:RasGAP(dok)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #RasGAP
	Species Grb2_pSOS_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:SOS(grb2!81,p~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Grb2(sos!81)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #Grb2_pSOS
	Species pShc_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:Shc(p~P,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #pShc
	Species pSOS_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:SOS(grb2,p~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #pSOS
	Species pFRS2_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:FRS2(p~P,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #pFRS2
	Species trkaI_int_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:trkaI(_deg~0,_int~_INT,ngfr,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #trkaI_int
	Species pro_TrkA_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:pro_TrkA()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #pro_TrkA
	Species L_NGFR_I_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:pTrkA(L_NGFR~L_NGFR,_deg~0,_endo~0,frs2,shc,trkai!245)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.trkaI(_deg~0,_int~_INT,ngfr,ptrka!245)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #L_NGFR_I
	Species NGFR_I_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:NGFR(NGFR_interstitial_fluid~0,_deg~0,ngf,trkai!240)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.trkaI(_deg~0,_int~_INT,ngfr!240,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #NGFR_I
	Species NGFR_I_deg_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:NGFR(NGFR_interstitial_fluid~0,_deg~_DEG,ngf,trkai!240)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.trkaI(_deg~0,_int~_INT,ngfr!240,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #NGFR_I_deg
	Species L_NGFR_I_deg_mw3bc142df_1951_4fa9_b0a7_011c95012bbf @mw3bc142df_1951_4fa9_b0a7_011c95012bbf:pTrkA(L_NGFR~L_NGFR,_deg~_DEG,_endo~0,frs2,shc,trkai!245)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.trkaI(_deg~0,_int~_INT,ngfr,ptrka!245)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf #L_NGFR_I_deg
	Species NGFR_interstitial_fluid_mwc2fe3668_8fb0_4cfb_b795_99057e61e290 @mwc2fe3668_8fb0_4cfb_b795_99057e61e290:NGFR(NGFR_interstitial_fluid~NGFR_interstitial_fluid,_deg~0,ngf,trkai)@mwc2fe3668_8fb0_4cfb_b795_99057e61e290 #NGFR_interstitial_fluid
	Species NGF_mwc2fe3668_8fb0_4cfb_b795_99057e61e290 @mwc2fe3668_8fb0_4cfb_b795_99057e61e290:NGF(deg~0,ngfr,tz_deg)@mwc2fe3668_8fb0_4cfb_b795_99057e61e290 #NGF
	Species NGFdeg_mwc2fe3668_8fb0_4cfb_b795_99057e61e290 @mwc2fe3668_8fb0_4cfb_b795_99057e61e290:NGF(deg~DEG,ngfr,tz_deg)@mwc2fe3668_8fb0_4cfb_b795_99057e61e290 #NGFdeg
	Species NGFR_L_interstitial_fluid_mwc2fe3668_8fb0_4cfb_b795_99057e61e290 @mwc2fe3668_8fb0_4cfb_b795_99057e61e290:NGFR(NGFR_interstitial_fluid~NGFR_interstitial_fluid,_deg~0,ngf!244,trkai)@mwc2fe3668_8fb0_4cfb_b795_99057e61e290.NGF(deg~0,ngfr!244,tz_deg)@mwc2fe3668_8fb0_4cfb_b795_99057e61e290 #NGFR_L_interstitial_fluid
	Species tanezumab_mwc2fe3668_8fb0_4cfb_b795_99057e61e290 @mwc2fe3668_8fb0_4cfb_b795_99057e61e290:tz_deg(ngf,tanezumab~tanezumab)@mwc2fe3668_8fb0_4cfb_b795_99057e61e290 #tanezumab
	Species NGF_tanezumab_mwc2fe3668_8fb0_4cfb_b795_99057e61e290 @mwc2fe3668_8fb0_4cfb_b795_99057e61e290:NGF(deg~0,ngfr,tz_deg!242)@mwc2fe3668_8fb0_4cfb_b795_99057e61e290.tz_deg(ngf!242,tanezumab~tanezumab)@mwc2fe3668_8fb0_4cfb_b795_99057e61e290 #NGF_tanezumab
	Species tz_deg_mwc2fe3668_8fb0_4cfb_b795_99057e61e290 @mwc2fe3668_8fb0_4cfb_b795_99057e61e290:tz_deg(ngf,tanezumab~0)@mwc2fe3668_8fb0_4cfb_b795_99057e61e290 #tz_deg
	Species trkaI_mwc2fe3668_8fb0_4cfb_b795_99057e61e290 @mwc2fe3668_8fb0_4cfb_b795_99057e61e290:trkaI(_deg~0,_int~0,ngfr,ptrka)@mwc2fe3668_8fb0_4cfb_b795_99057e61e290 #trkaI
	Species trkaI_deg_mwc2fe3668_8fb0_4cfb_b795_99057e61e290 @mwc2fe3668_8fb0_4cfb_b795_99057e61e290:trkaI(_deg~_DEG,_int~0,ngfr,ptrka)@mwc2fe3668_8fb0_4cfb_b795_99057e61e290 #trkaI_deg
end observables
begin functions
	fRate0() = -NGFR_mw3bc142df_1951_4fa9_b0a7_011c95012bbf*kb_1 + kf_1*pro_TrkA_mw3bc142df_1951_4fa9_b0a7_011c95012bbf
	fRate37() = Vmax_39/(Dok_mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Km_39)
	fRate38() = Vmax_40/(Dok_mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Km_40)
	fRate39() = Vmax_41/(Dok_mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Km_41)
	fRate40() = Vmax_42/(Dok_mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Km_42)
	fRate41() = Vmax_43/(Dok_mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Km_43)
	fRate42() = Vmax_44/(Dok_mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Km_44)
	fRate43() = Vmax_45/(Dok_mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Km_45)
	fRate56() = Vmax_58/(Km_58 + Ras_GDP_mw3bc142df_1951_4fa9_b0a7_011c95012bbf)
	fRate57() = Vmax_59/(Km_59 + SOS_mw3bc142df_1951_4fa9_b0a7_011c95012bbf)
	fRate58() = Vmax_60/(Grb2_SOS_pShc_mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Km_60)
	fRate59() = Vmax_61/(Grb2_SOS_mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Km_61)
	fRate60() = Vmax_62/(Km_62 + Ras_GTP_mw3bc142df_1951_4fa9_b0a7_011c95012bbf)
	fRate61() = Vmax_63/(B_Raf_Ras_GTP_mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Km_63)
	fRate62() = Vmax_64/(Km_64 + c_Raf_Ras_GTP_mw3bc142df_1951_4fa9_b0a7_011c95012bbf)
	fRate68() = Vmax_70/(Km_70 + Rap1_GDP_mw3bc142df_1951_4fa9_b0a7_011c95012bbf)
	fRate69() = Rap1GAP*Vmax_71/(Km_71 + Rap1_GTP_mw3bc142df_1951_4fa9_b0a7_011c95012bbf)
	fRate70() = Rap1GAP*Vmax_72/(B_Raf_Rap1_GTP_mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Km_72)
	fRate79() = Vmax_81/(Km_81 + MEKcyt_mw3bc142df_1951_4fa9_b0a7_011c95012bbf)
	fRate80() = Vmax_82/(Km_82 + pMEKcyt_mw3bc142df_1951_4fa9_b0a7_011c95012bbf)
	fRate81() = Vmax_83/(Km_83 + MEKcyt_ERKcyt_mw3bc142df_1951_4fa9_b0a7_011c95012bbf)
	fRate82() = Vmax_84/(Km_84 + pMEKcyt_ERKcyt_mw3bc142df_1951_4fa9_b0a7_011c95012bbf)
	fRate83() = Vmax_85/(Km_85 + MEKcyt_mw3bc142df_1951_4fa9_b0a7_011c95012bbf)
	fRate84() = Vmax_86/(Km_86 + pMEKcyt_mw3bc142df_1951_4fa9_b0a7_011c95012bbf)
	fRate85() = Vmax_87/(Km_87 + MEKcyt_ERKcyt_mw3bc142df_1951_4fa9_b0a7_011c95012bbf)
	fRate86() = Vmax_88/(Km_88 + pMEKcyt_ERKcyt_mw3bc142df_1951_4fa9_b0a7_011c95012bbf)
	fRate87() = Vmax_89/(Km_89 + MEKcyt_mw3bc142df_1951_4fa9_b0a7_011c95012bbf)
	fRate88() = Vmax_90/(Km_90 + pMEKcyt_mw3bc142df_1951_4fa9_b0a7_011c95012bbf)
	fRate89() = Vmax_91/(Km_91 + MEKcyt_ERKcyt_mw3bc142df_1951_4fa9_b0a7_011c95012bbf)
	fRate90() = Vmax_92/(Km_92 + pMEKcyt_ERKcyt_mw3bc142df_1951_4fa9_b0a7_011c95012bbf)
	fRate91() = PP2Acyt*Vmax_93/(Km_93 + pMEKcyt_mw3bc142df_1951_4fa9_b0a7_011c95012bbf)
	fRate92() = PP2Acyt*Vmax_94/(Km_94 + ppMEKcyt_mw3bc142df_1951_4fa9_b0a7_011c95012bbf)
	fRate93() = PP2Acyt*Vmax_95/(Km_95 + pMEKcyt_ERKcyt_mw3bc142df_1951_4fa9_b0a7_011c95012bbf)
	fRate94() = PP2Acyt*Vmax_96/(Km_96 + ppMEKcyt_ERKcyt_mw3bc142df_1951_4fa9_b0a7_011c95012bbf)
	fRate95() = MKP3cyt*Vmax_97/(Km_97 + ppERKcyt_mw3bc142df_1951_4fa9_b0a7_011c95012bbf)
	fRate96() = MKP3cyt*Vmax_98/(Km_98 + dppERKcyt_mw3bc142df_1951_4fa9_b0a7_011c95012bbf)
	fRate102() = PP2Anuc*Vmax_104/(Km_104 + pMEKnuc_mw3bc142df_1951_4fa9_b0a7_011c95012bbf)
	fRate103() = PP2Anuc*Vmax_105/(Km_105 + ppMEKnuc_mw3bc142df_1951_4fa9_b0a7_011c95012bbf)
	fRate104() = PP2Anuc*Vmax_106/(Km_106 + pMEKnuc_ERKnuc_mw3bc142df_1951_4fa9_b0a7_011c95012bbf)
	fRate105() = PP2Anuc*Vmax_107/(Km_107 + ppMEKnuc_ERKnuc_mw3bc142df_1951_4fa9_b0a7_011c95012bbf)
	fRate106() = MKP3nuc*Vmax_108/(Km_108 + ppERKnuc_mw3bc142df_1951_4fa9_b0a7_011c95012bbf)
	fRate107() = MKP3nuc*Vmax_109/(Km_109 + dppERKnuc_mw3bc142df_1951_4fa9_b0a7_011c95012bbf)
	fRate150() = 83330.0
	fRate150m() = 83333.3333333333
	fRate151() = 2000000.0
	fRate151m() = 166.666666666667
	fRate152() = 166.666666666667
	fRate152m() = 2000000.0
end functions
begin reaction rules
	R1_reactants_0: 0  -> pro_TrkA()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -1*(fRate0()) #Modifiers(mwf82ad06a_b8aa_40fa_a532_a1da44e3425f, NGFR)
	R1_products_0: 0  -> NGFR(NGFR_interstitial_fluid~0,_deg~0,ngf,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate0() #Modifiers(mwf82ad06a_b8aa_40fa_a532_a1da44e3425f, NGFR)
	R1_products_1: 0  -> pro_TrkA()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate0() #Modifiers(mwf82ad06a_b8aa_40fa_a532_a1da44e3425f, NGFR)
	R3: pTrkA(L_NGFR~L_NGFR,_deg~0,_endo~0,frs2,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_3 #Modifiers(L_NGFR)
	R4: pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> pTrkA(L_NGFR~0,_deg~0,_endo~_ENDO,frs2,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_4 #Modifiers(pTrkA)
	R5: pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2,shc!234,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Shc(p~0,ptrka!234)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> pTrkA(L_NGFR~0,_deg~0,_endo~_ENDO,frs2,shc!234,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Shc(p~0,ptrka!234)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_5 #Modifiers(Shc_pTrkA)
	R6: pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2,shc!234,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Shc(p~P,ptrka!234)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> pTrkA(L_NGFR~0,_deg~0,_endo~_ENDO,frs2,shc!234,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Shc(p~P,ptrka!234)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_6 #Modifiers(pShc_pTrkA)
	R7: Grb2_SOS_pShc_pTrkA()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> Grb2_SOS_pShc_pTrkA_endo()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_7 #Modifiers(Grb2_SOS_pShc_pTrkA)
	R8: pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2!235,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.FRS2(p~0,ptrka!235)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> pTrkA(L_NGFR~0,_deg~0,_endo~_ENDO,frs2!235,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.FRS2(p~0,ptrka!235)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_8 #Modifiers(FRS2_pTrkA)
	R9: pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2!235,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.FRS2(p~P,ptrka!235)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> pTrkA(L_NGFR~0,_deg~0,_endo~_ENDO,frs2!235,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.FRS2(p~P,ptrka!235)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_9 #Modifiers(pFRS2_pTrkA)
	R10: Crk_C3G_pFRS2_pTrkA()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> Crk_C3G_pFRS2_pTrkA_endo()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_10 #Modifiers(Crk_C3G_pFRS2_pTrkA)
	R11: pTrkA(L_NGFR~0,_deg~0,_endo~_ENDO,frs2,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> 0  kf_11 #Modifiers(pTrkA_endo)
	R12: pTrkA(L_NGFR~0,_deg~0,_endo~_ENDO,frs2,shc!234,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Shc(p~0,ptrka!234)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> Shc(p~0,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_12 #Modifiers(Shc_pTrkA_endo)
	R13: pTrkA(L_NGFR~0,_deg~0,_endo~_ENDO,frs2,shc!234,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Shc(p~P,ptrka!234)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> Shc(p~P,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_13 #Modifiers(pShc_pTrkA_endo)
	R14: Grb2_SOS_pShc_pTrkA_endo()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> Grb2_SOS_pShc()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_14 #Modifiers(Grb2_SOS_pShc_pTrkA_endo)
	R15: pTrkA(L_NGFR~0,_deg~0,_endo~_ENDO,frs2!235,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.FRS2(p~0,ptrka!235)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> FRS2(p~0,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_15 #Modifiers(FRS2_pTrkA_endo)
	R16: pTrkA(L_NGFR~0,_deg~0,_endo~_ENDO,frs2!235,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.FRS2(p~P,ptrka!235)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> FRS2(p~P,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_16 #Modifiers(pFRS2_pTrkA_endo)
	R17: Crk_C3G_pFRS2_pTrkA_endo()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> Crk(c3g!233)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.C3G(crk!233)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + FRS2(p~P,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_17 #Modifiers(Crk_C3G_pFRS2_pTrkA_endo)
	R18: pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Shc(p~0,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2,shc!234,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Shc(p~0,ptrka!234)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf mwdfa3719d_20cc_4f14_b45e_3f097c3aff65,kb_18 #Modifiers(Shc, pTrkA, Shc_pTrkA)
	R19: pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Shc(p~P,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2,shc!234,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Shc(p~P,ptrka!234)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_19,kb_19 #Modifiers(pShc, pTrkA, pShc_pTrkA)
	R20: pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Grb2_SOS_pShc()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> Grb2_SOS_pShc_pTrkA()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_20,kb_20 #Modifiers(Grb2_SOS_pShc, pTrkA, Grb2_SOS_pShc_pTrkA)
	R21: pTrkA(L_NGFR~0,_deg~0,_endo~_ENDO,frs2,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Shc(p~0,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> pTrkA(L_NGFR~0,_deg~0,_endo~_ENDO,frs2,shc!234,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Shc(p~0,ptrka!234)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_21,kb_21 #Modifiers(Shc, pTrkA_endo, Shc_pTrkA_endo)
	R22: pTrkA(L_NGFR~0,_deg~0,_endo~_ENDO,frs2,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Shc(p~P,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> pTrkA(L_NGFR~0,_deg~0,_endo~_ENDO,frs2,shc!234,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Shc(p~P,ptrka!234)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_22,kb_22 #Modifiers(pShc, pTrkA_endo, pShc_pTrkA_endo)
	R23: pTrkA(L_NGFR~0,_deg~0,_endo~_ENDO,frs2,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Grb2_SOS_pShc()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> Grb2_SOS_pShc_pTrkA_endo()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_23,kb_23 #Modifiers(Grb2_SOS_pShc, pTrkA_endo, Grb2_SOS_pShc_pTrkA_endo)
	R24: pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + FRS2(p~0,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2!235,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.FRS2(p~0,ptrka!235)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_24,kb_24 #Modifiers(FRS2, pTrkA, FRS2_pTrkA)
	R25: pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + FRS2(p~P,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2!235,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.FRS2(p~P,ptrka!235)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_25,kb_25 #Modifiers(pFRS2, pTrkA, pFRS2_pTrkA)
	R26: pTrkA(L_NGFR~0,_deg~0,_endo~_ENDO,frs2,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + FRS2(p~0,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> pTrkA(L_NGFR~0,_deg~0,_endo~_ENDO,frs2!235,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.FRS2(p~0,ptrka!235)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_26,kb_26 #Modifiers(FRS2, pTrkA_endo, FRS2_pTrkA_endo)
	R27: pTrkA(L_NGFR~0,_deg~0,_endo~_ENDO,frs2,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + FRS2(p~P,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> pTrkA(L_NGFR~0,_deg~0,_endo~_ENDO,frs2!235,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.FRS2(p~P,ptrka!235)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_27,kb_27 #Modifiers(pFRS2, pTrkA_endo, pFRS2_pTrkA_endo)
	R28: pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2,shc!234,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Shc(p~0,ptrka!234)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2,shc!234,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Shc(p~P,ptrka!234)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_28 #Modifiers(Shc_pTrkA)
	R29: pTrkA(L_NGFR~0,_deg~0,_endo~_ENDO,frs2,shc!234,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Shc(p~0,ptrka!234)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> pTrkA(L_NGFR~0,_deg~0,_endo~_ENDO,frs2,shc!234,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Shc(p~P,ptrka!234)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_29 #Modifiers(Shc_pTrkA_endo)
	R30: pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2!235,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.FRS2(p~0,ptrka!235)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2!235,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.FRS2(p~P,ptrka!235)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_30 #Modifiers(FRS2_pTrkA)
	R31: pTrkA(L_NGFR~0,_deg~0,_endo~_ENDO,frs2!235,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.FRS2(p~0,ptrka!235)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> pTrkA(L_NGFR~0,_deg~0,_endo~_ENDO,frs2!235,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.FRS2(p~P,ptrka!235)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_31 #Modifiers(FRS2_pTrkA_endo)
	R32: pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> 0  kf_32 #Modifiers(pTrkA)
	R33: pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2,shc!234,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Shc(p~0,ptrka!234)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> Shc(p~0,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_33 #Modifiers(Shc_pTrkA)
	R34: pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2,shc!234,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Shc(p~P,ptrka!234)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> Shc(p~P,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_34 #Modifiers(pShc_pTrkA)
	R35: Grb2_SOS_pShc_pTrkA()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> Grb2_SOS_pShc()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_35 #Modifiers(Grb2_SOS_pShc_pTrkA)
	R36: pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2!235,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.FRS2(p~0,ptrka!235)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> FRS2(p~0,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_36 #Modifiers(FRS2_pTrkA)
	R37: pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2!235,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.FRS2(p~P,ptrka!235)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> FRS2(p~P,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_37 #Modifiers(pFRS2_pTrkA)
	R38: Crk_C3G_pFRS2_pTrkA()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> Crk(c3g!233)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.C3G(crk!233)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + FRS2(p~P,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_38 #Modifiers(Crk_C3G_pFRS2_pTrkA)
	R39: Dok(p~0,rasgap)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> Dok(p~P,rasgap)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate37() #Modifiers(pTrkA, Dok)
	R40: Dok(p~0,rasgap)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2,shc!234,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Shc(p~0,ptrka!234)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> Dok(p~P,rasgap)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2,shc!234,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Shc(p~0,ptrka!234)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate38() #Modifiers(Shc_pTrkA, Dok)
	R41: Dok(p~0,rasgap)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2,shc!234,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Shc(p~P,ptrka!234)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> Dok(p~P,rasgap)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2,shc!234,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Shc(p~P,ptrka!234)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate39() #Modifiers(pShc_pTrkA, Dok)
	R42: Dok(p~0,rasgap)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Grb2_SOS_pShc_pTrkA()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> Dok(p~P,rasgap)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Grb2_SOS_pShc_pTrkA()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate40() #Modifiers(Grb2_SOS_pShc_pTrkA, Dok)
	R43: Dok(p~0,rasgap)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2!235,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.FRS2(p~0,ptrka!235)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> Dok(p~P,rasgap)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2!235,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.FRS2(p~0,ptrka!235)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate41() #Modifiers(FRS2_pTrkA, Dok)
	R44: Dok(p~0,rasgap)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2!235,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.FRS2(p~P,ptrka!235)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> Dok(p~P,rasgap)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2!235,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.FRS2(p~P,ptrka!235)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate42() #Modifiers(pFRS2_pTrkA, Dok)
	R45: Dok(p~0,rasgap)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Crk_C3G_pFRS2_pTrkA()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> Dok(p~P,rasgap)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Crk_C3G_pFRS2_pTrkA()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate43() #Modifiers(Crk_C3G_pFRS2_pTrkA, Dok)
	R46: Grb2(sos)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + SOS(grb2,p~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> SOS(grb2!81,p~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Grb2(sos!81)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_46,kb_46 #Modifiers(Grb2, SOS, Grb2_SOS)
	R47: Grb2(sos)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + SOS(grb2,p~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> SOS(grb2!81,p~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Grb2(sos!81)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_47,kb_47 #Modifiers(Grb2, pSOS, Grb2_pSOS)
	R48: SOS(grb2!81,p~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Grb2(sos!81)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Shc(p~P,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> Grb2_SOS_pShc()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_48,kb_48 #Modifiers(Grb2_SOS, pShc, Grb2_SOS_pShc)
	R49: pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2,shc!234,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Shc(p~P,ptrka!234)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + SOS(grb2!81,p~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Grb2(sos!81)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> Grb2_SOS_pShc_pTrkA()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_49,kb_49 #Modifiers(Grb2_SOS, pShc_pTrkA, Grb2_SOS_pShc_pTrkA)
	R50: pTrkA(L_NGFR~0,_deg~0,_endo~_ENDO,frs2,shc!234,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Shc(p~P,ptrka!234)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + SOS(grb2!81,p~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Grb2(sos!81)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> Grb2_SOS_pShc_pTrkA_endo()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_50,kb_50 #Modifiers(Grb2_SOS, pShc_pTrkA_endo, Grb2_SOS_pShc_pTrkA_endo)
	R51: Shc(p~P,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> Shc(p~0,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_51 #Modifiers(pShc)
	R52: Grb2_SOS_pShc()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> Shc(p~0,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + SOS(grb2!81,p~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Grb2(sos!81)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_52 #Modifiers(Grb2_SOS_pShc)
	R53: SOS(grb2,p~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> SOS(grb2,p~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_53 #Modifiers(pSOS)
	R54: SOS(grb2!81,p~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Grb2(sos!81)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> SOS(grb2!81,p~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Grb2(sos!81)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_54 #Modifiers(Grb2_pSOS)
	R55: Dok(p~P,rasgap)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + RasGAP(dok)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> Dok(p~P,rasgap!241)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.RasGAP(dok!241)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_55,kb_55 #Modifiers(pDok, RasGAP, pDok_RasGAP)
	R56: Dok(p~P,rasgap)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> Dok(p~0,rasgap)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_56,kb_56 #Modifiers(pDok, Dok)
	R57: Ras_GTP(Ras_GDP~0,b_raf,c_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> Ras_GTP(Ras_GDP~Ras_GDP,b_raf,c_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_57 #Modifiers(Ras_GTP)
	R58: Ras_GTP(Ras_GDP~Ras_GDP,b_raf,c_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Grb2_SOS_pShc_pTrkA()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> Ras_GTP(Ras_GDP~0,b_raf,c_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Grb2_SOS_pShc_pTrkA()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate56() #Modifiers(Grb2_SOS_pShc_pTrkA, Ras_GDP)
	R59: SOS(grb2,p~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + ERKcyt(erkcyt!246,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKcyt(erkcyt!246,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> SOS(grb2,p~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + ERKcyt(erkcyt!246,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKcyt(erkcyt!246,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate57() #Modifiers(dppERKcyt, SOS)
	R60: Grb2_SOS_pShc()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + ERKcyt(erkcyt!246,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKcyt(erkcyt!246,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> SOS(grb2!81,p~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Grb2(sos!81)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Shc(p~P,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + ERKcyt(erkcyt!246,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKcyt(erkcyt!246,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate58() #Modifiers(dppERKcyt, Grb2_SOS_pShc)
	R61: SOS(grb2!81,p~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Grb2(sos!81)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + ERKcyt(erkcyt!246,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKcyt(erkcyt!246,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> SOS(grb2!81,p~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.Grb2(sos!81)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + ERKcyt(erkcyt!246,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKcyt(erkcyt!246,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate59() #Modifiers(dppERKcyt, Grb2_SOS)
	R62: Ras_GTP(Ras_GDP~0,b_raf,c_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Dok(p~P,rasgap!241)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.RasGAP(dok!241)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> Ras_GTP(Ras_GDP~Ras_GDP,b_raf,c_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Dok(p~P,rasgap!241)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.RasGAP(dok!241)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate60() #Modifiers(pDok_RasGAP, Ras_GTP)
	R63: Ras_GTP(Ras_GDP~0,b_raf!236,c_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.B_Raf(rap1,ras_gtp!236)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Dok(p~P,rasgap!241)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.RasGAP(dok!241)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> Ras_GTP(Ras_GDP~Ras_GDP,b_raf,c_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + B_Raf(rap1,ras_gtp)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Dok(p~P,rasgap!241)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.RasGAP(dok!241)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate61() #Modifiers(pDok_RasGAP, B_Raf_Ras_GTP)
	R64: Ras_GTP(Ras_GDP~0,b_raf,c_raf!237)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.c_Raf(ras_gtp!237)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Dok(p~P,rasgap!241)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.RasGAP(dok!241)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> Ras_GTP(Ras_GDP~Ras_GDP,b_raf,c_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + c_Raf(ras_gtp)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Dok(p~P,rasgap!241)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.RasGAP(dok!241)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate62() #Modifiers(pDok_RasGAP, c_Raf_Ras_GTP)
	R65: Crk(c3g)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + C3G(crk)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> Crk(c3g!233)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.C3G(crk!233)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_65,kb_65 #Modifiers(C3G, Crk, Crk_C3G)
	R66: pTrkA(L_NGFR~0,_deg~0,_endo~0,frs2!235,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.FRS2(p~P,ptrka!235)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Crk(c3g!233)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.C3G(crk!233)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> Crk_C3G_pFRS2_pTrkA()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_66,kb_66 #Modifiers(Crk_C3G, pFRS2_pTrkA, Crk_C3G_pFRS2_pTrkA)
	R67: pTrkA(L_NGFR~0,_deg~0,_endo~_ENDO,frs2!235,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.FRS2(p~P,ptrka!235)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Crk(c3g!233)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.C3G(crk!233)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> Crk_C3G_pFRS2_pTrkA_endo()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_67,kb_67 #Modifiers(Crk_C3G, pFRS2_pTrkA_endo, Crk_C3G_pFRS2_pTrkA_endo)
	R68: FRS2(p~P,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> FRS2(p~0,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_68 #Modifiers(pFRS2)
	R69: Rap1(_gdp~0,_gtp~_GTP,b_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> Rap1(_gdp~_GDP,_gtp~0,b_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_69 #Modifiers(Rap1_GTP)
	R70: Rap1(_gdp~_GDP,_gtp~0,b_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Crk_C3G_pFRS2_pTrkA_endo()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> Rap1(_gdp~0,_gtp~_GTP,b_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Crk_C3G_pFRS2_pTrkA_endo()@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate68() #Modifiers(Crk_C3G_pFRS2_pTrkA_endo, Rap1_GDP)
	R71: Rap1(_gdp~0,_gtp~_GTP,b_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> Rap1(_gdp~_GDP,_gtp~0,b_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate69() #Modifiers(Rap1_GTP)
	R72: Rap1(_gdp~_GDP,_gtp~0,b_raf!243)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.B_Raf(rap1!243,ras_gtp)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> B_Raf(rap1,ras_gtp)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Rap1(_gdp~_GDP,_gtp~0,b_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate70() #Modifiers(B_Raf_Rap1_GTP)
	R73: Ras_GTP(Ras_GDP~0,b_raf,c_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + c_Raf(ras_gtp)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> Ras_GTP(Ras_GDP~0,b_raf,c_raf!237)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.c_Raf(ras_gtp!237)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_73,kb_73 #Modifiers(c_Raf, Ras_GTP, c_Raf_Ras_GTP)
	R74: Ras_GTP(Ras_GDP~0,b_raf,c_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + B_Raf(rap1,ras_gtp)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> Ras_GTP(Ras_GDP~0,b_raf!236,c_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.B_Raf(rap1,ras_gtp!236)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_74,kb_74 #Modifiers(B_Raf, Ras_GTP, B_Raf_Ras_GTP)
	R75: B_Raf(rap1,ras_gtp)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Rap1(_gdp~0,_gtp~_GTP,b_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> Rap1(_gdp~_GDP,_gtp~0,b_raf!243)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.B_Raf(rap1!243,ras_gtp)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_75,kb_75 #Modifiers(B_Raf, Rap1_GTP, B_Raf_Rap1_GTP)
	R76: ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKcyt(erkcyt!238,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> MEKcyt(erkcyt,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + ERKcyt(erkcyt,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_76 #Modifiers(ppMEKcyt_ERKcyt)
	R77: ERKcyt(erkcyt,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + ERKcyt(erkcyt,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> ERKcyt(erkcyt!246,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKcyt(erkcyt!246,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_77,kb_77 #Modifiers(ppERKcyt, dppERKcyt)
	R78: MEKcyt(erkcyt,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + ERKcyt(erkcyt,mekcyt,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> MEKcyt(erkcyt!238,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_78,kb_78 #Modifiers(MEKcyt, ERKcyt, MEKcyt_ERKcyt)
	R79: ERKcyt(erkcyt,mekcyt,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + MEKcyt(erkcyt,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKcyt(erkcyt!238,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_79,kb_79 #Modifiers(pMEKcyt, ERKcyt, pMEKcyt_ERKcyt)
	R80: MEKcyt(erkcyt,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + ERKcyt(erkcyt,mekcyt,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKcyt(erkcyt!238,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_80,kb_80 #Modifiers(ppMEKcyt, ERKcyt, ppMEKcyt_ERKcyt)
	R81: MEKcyt(erkcyt,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Ras_GTP(Ras_GDP~0,b_raf,c_raf!237)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.c_Raf(ras_gtp!237)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> MEKcyt(erkcyt,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Ras_GTP(Ras_GDP~0,b_raf,c_raf!237)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.c_Raf(ras_gtp!237)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate79() #Modifiers(c_Raf_Ras_GTP, MEKcyt)
	R82: MEKcyt(erkcyt,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Ras_GTP(Ras_GDP~0,b_raf,c_raf!237)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.c_Raf(ras_gtp!237)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> MEKcyt(erkcyt,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Ras_GTP(Ras_GDP~0,b_raf,c_raf!237)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.c_Raf(ras_gtp!237)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate80() #Modifiers(c_Raf_Ras_GTP, pMEKcyt)
	R83: MEKcyt(erkcyt!238,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Ras_GTP(Ras_GDP~0,b_raf,c_raf!237)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.c_Raf(ras_gtp!237)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKcyt(erkcyt!238,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Ras_GTP(Ras_GDP~0,b_raf,c_raf!237)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.c_Raf(ras_gtp!237)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate81() #Modifiers(c_Raf_Ras_GTP, MEKcyt_ERKcyt)
	R84: ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKcyt(erkcyt!238,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Ras_GTP(Ras_GDP~0,b_raf,c_raf!237)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.c_Raf(ras_gtp!237)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKcyt(erkcyt!238,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Ras_GTP(Ras_GDP~0,b_raf,c_raf!237)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.c_Raf(ras_gtp!237)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate82() #Modifiers(c_Raf_Ras_GTP, pMEKcyt_ERKcyt)
	R85: MEKcyt(erkcyt,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Ras_GTP(Ras_GDP~0,b_raf!236,c_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.B_Raf(rap1,ras_gtp!236)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> MEKcyt(erkcyt,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Ras_GTP(Ras_GDP~0,b_raf!236,c_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.B_Raf(rap1,ras_gtp!236)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate83() #Modifiers(B_Raf_Ras_GTP, MEKcyt)
	R86: MEKcyt(erkcyt,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Ras_GTP(Ras_GDP~0,b_raf!236,c_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.B_Raf(rap1,ras_gtp!236)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> MEKcyt(erkcyt,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Ras_GTP(Ras_GDP~0,b_raf!236,c_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.B_Raf(rap1,ras_gtp!236)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate84() #Modifiers(B_Raf_Ras_GTP, pMEKcyt)
	R87: MEKcyt(erkcyt!238,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Ras_GTP(Ras_GDP~0,b_raf!236,c_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.B_Raf(rap1,ras_gtp!236)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKcyt(erkcyt!238,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Ras_GTP(Ras_GDP~0,b_raf!236,c_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.B_Raf(rap1,ras_gtp!236)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate85() #Modifiers(B_Raf_Ras_GTP, MEKcyt_ERKcyt)
	R88: ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKcyt(erkcyt!238,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Ras_GTP(Ras_GDP~0,b_raf!236,c_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.B_Raf(rap1,ras_gtp!236)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKcyt(erkcyt!238,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Ras_GTP(Ras_GDP~0,b_raf!236,c_raf)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.B_Raf(rap1,ras_gtp!236)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate86() #Modifiers(B_Raf_Ras_GTP, pMEKcyt_ERKcyt)
	R89: MEKcyt(erkcyt,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Rap1(_gdp~_GDP,_gtp~0,b_raf!243)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.B_Raf(rap1!243,ras_gtp)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> MEKcyt(erkcyt,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Rap1(_gdp~_GDP,_gtp~0,b_raf!243)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.B_Raf(rap1!243,ras_gtp)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate87() #Modifiers(B_Raf_Rap1_GTP, MEKcyt)
	R90: MEKcyt(erkcyt,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Rap1(_gdp~_GDP,_gtp~0,b_raf!243)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.B_Raf(rap1!243,ras_gtp)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> MEKcyt(erkcyt,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Rap1(_gdp~_GDP,_gtp~0,b_raf!243)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.B_Raf(rap1!243,ras_gtp)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate88() #Modifiers(B_Raf_Rap1_GTP, pMEKcyt)
	R91: MEKcyt(erkcyt!238,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Rap1(_gdp~_GDP,_gtp~0,b_raf!243)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.B_Raf(rap1!243,ras_gtp)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKcyt(erkcyt!238,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Rap1(_gdp~_GDP,_gtp~0,b_raf!243)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.B_Raf(rap1!243,ras_gtp)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate89() #Modifiers(B_Raf_Rap1_GTP, MEKcyt_ERKcyt)
	R92: ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKcyt(erkcyt!238,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Rap1(_gdp~_GDP,_gtp~0,b_raf!243)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.B_Raf(rap1!243,ras_gtp)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKcyt(erkcyt!238,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + Rap1(_gdp~_GDP,_gtp~0,b_raf!243)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.B_Raf(rap1!243,ras_gtp)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate90() #Modifiers(B_Raf_Rap1_GTP, pMEKcyt_ERKcyt)
	R93: MEKcyt(erkcyt,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> MEKcyt(erkcyt,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate91() #Modifiers(pMEKcyt)
	R94: MEKcyt(erkcyt,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> MEKcyt(erkcyt,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate92() #Modifiers(ppMEKcyt)
	R95: ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKcyt(erkcyt!238,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> MEKcyt(erkcyt!238,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate93() #Modifiers(pMEKcyt_ERKcyt)
	R96: ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKcyt(erkcyt!238,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKcyt(erkcyt!238,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate94() #Modifiers(ppMEKcyt_ERKcyt)
	R97: ERKcyt(erkcyt,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> ERKcyt(erkcyt,mekcyt,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate95() #Modifiers(ppERKcyt)
	R98: ERKcyt(erkcyt!246,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKcyt(erkcyt!246,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> ERKcyt(erkcyt,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + ERKcyt(erkcyt,mekcyt,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate96() #Modifiers(dppERKcyt)
	R99: ERKnuc(erknuc,meknuc!239,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKnuc(erknuc!239,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> MEKnuc(erknuc,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + ERKnuc(erknuc,meknuc,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_99 #Modifiers(ppMEKnuc_ERKnuc)
	R100: ERKnuc(erknuc,meknuc,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + ERKnuc(erknuc,meknuc,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> ERKnuc(erknuc!247,meknuc,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKnuc(erknuc!247,meknuc,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_100,kb_100 #Modifiers(ppERKnuc, dppERKnuc)
	R101: MEKnuc(erknuc,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + ERKnuc(erknuc,meknuc,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> MEKnuc(erknuc!239,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKnuc(erknuc,meknuc!239,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_101,kb_101 #Modifiers(MEKnuc, ERKnuc, MEKnuc_ERKnuc)
	R102: ERKnuc(erknuc,meknuc,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + MEKnuc(erknuc,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> ERKnuc(erknuc,meknuc!239,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKnuc(erknuc!239,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_102,kb_102 #Modifiers(pMEKnuc, ERKnuc, pMEKnuc_ERKnuc)
	R103: MEKnuc(erknuc,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + ERKnuc(erknuc,meknuc,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> ERKnuc(erknuc,meknuc!239,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKnuc(erknuc!239,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_103,kb_103 #Modifiers(ppMEKnuc, ERKnuc, ppMEKnuc_ERKnuc)
	R104: MEKnuc(erknuc,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> MEKnuc(erknuc,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate102() #Modifiers(pMEKnuc)
	R105: MEKnuc(erknuc,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> MEKnuc(erknuc,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate103() #Modifiers(ppMEKnuc)
	R106: ERKnuc(erknuc,meknuc!239,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKnuc(erknuc!239,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> MEKnuc(erknuc!239,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKnuc(erknuc,meknuc!239,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate104() #Modifiers(pMEKnuc_ERKnuc)
	R107: ERKnuc(erknuc,meknuc!239,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKnuc(erknuc!239,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> ERKnuc(erknuc,meknuc!239,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKnuc(erknuc!239,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate105() #Modifiers(ppMEKnuc_ERKnuc)
	R108: ERKnuc(erknuc,meknuc,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> ERKnuc(erknuc,meknuc,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate106() #Modifiers(ppERKnuc)
	R109: ERKnuc(erknuc!247,meknuc,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKnuc(erknuc!247,meknuc,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> ERKnuc(erknuc,meknuc,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + ERKnuc(erknuc,meknuc,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate107() #Modifiers(dppERKnuc)
	R110: MEKcyt(erkcyt,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> 0  kf_110 #Modifiers(pMEKcyt)
	R111: MEKcyt(erkcyt,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> MEKnuc(erknuc,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + MEKcyt(erkcyt,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_111 #Modifiers(pMEKcyt)
	R112: MEKnuc(erknuc,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> MEKcyt(erkcyt,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + MEKnuc(erknuc,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_112 #Modifiers(pMEKnuc)
	R113: MEKnuc(erknuc,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> 0  kf_113 #Modifiers(pMEKnuc)
	R114: MEKcyt(erkcyt!238,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> 0  kf_114 #Modifiers(MEKcyt_ERKcyt)
	R115: MEKcyt(erkcyt!238,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> MEKnuc(erknuc!239,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKnuc(erknuc,meknuc!239,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + MEKcyt(erkcyt!238,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_115 #Modifiers(MEKcyt_ERKcyt)
	R116: MEKnuc(erknuc!239,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKnuc(erknuc,meknuc!239,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> MEKcyt(erkcyt!238,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + MEKnuc(erknuc!239,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKnuc(erknuc,meknuc!239,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_116 #Modifiers(MEKnuc_ERKnuc)
	R117: MEKnuc(erknuc!239,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKnuc(erknuc,meknuc!239,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> 0  kf_117 #Modifiers(MEKnuc_ERKnuc)
	R118: ERKcyt(erkcyt,mekcyt,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> 0  kf_118 #Modifiers(ERKcyt)
	R119: ERKcyt(erkcyt,mekcyt,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> ERKnuc(erknuc,meknuc,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + ERKcyt(erkcyt,mekcyt,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_119 #Modifiers(ERKcyt)
	R120: ERKnuc(erknuc,meknuc,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> ERKcyt(erkcyt,mekcyt,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + ERKnuc(erknuc,meknuc,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_120 #Modifiers(ERKnuc)
	R121: ERKnuc(erknuc,meknuc,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> 0  kf_121 #Modifiers(ERKnuc)
	R122: MEKcyt(erkcyt,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> 0  kf_122 #Modifiers(MEKcyt)
	R123: MEKcyt(erkcyt,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> MEKnuc(erknuc,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + MEKcyt(erkcyt,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_123 #Modifiers(MEKcyt)
	R124: MEKnuc(erknuc,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> MEKcyt(erkcyt,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + MEKnuc(erknuc,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_124 #Modifiers(MEKnuc)
	R125: MEKnuc(erknuc,p~0,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> 0  kf_125 #Modifiers(MEKnuc)
	R126: ERKcyt(erkcyt,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> 0  kf_126 #Modifiers(ppERKcyt)
	R127: ERKcyt(erkcyt,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> ERKnuc(erknuc,meknuc,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + ERKcyt(erkcyt,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_127 #Modifiers(ppERKcyt)
	R128: ERKnuc(erknuc,meknuc,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> ERKcyt(erkcyt,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + ERKnuc(erknuc,meknuc,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_128 #Modifiers(ppERKnuc)
	R129: ERKnuc(erknuc,meknuc,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> 0  kf_129 #Modifiers(ppERKnuc)
	R130: MEKcyt(erkcyt,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> 0  kf_130 #Modifiers(ppMEKcyt)
	R131: MEKcyt(erkcyt,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> MEKnuc(erknuc,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + MEKcyt(erkcyt,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_131 #Modifiers(ppMEKcyt)
	R132: MEKnuc(erknuc,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> MEKcyt(erkcyt,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + MEKnuc(erknuc,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_132 #Modifiers(ppMEKnuc)
	R133: MEKnuc(erknuc,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> 0  kf_133 #Modifiers(ppMEKnuc)
	R134: ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKcyt(erkcyt!238,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> 0  kf_134 #Modifiers(ppMEKcyt_ERKcyt)
	R135: ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKcyt(erkcyt!238,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> ERKnuc(erknuc,meknuc!239,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKnuc(erknuc!239,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKcyt(erkcyt!238,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_135 #Modifiers(ppMEKcyt_ERKcyt)
	R136: ERKnuc(erknuc,meknuc!239,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKnuc(erknuc!239,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKcyt(erkcyt!238,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + ERKnuc(erknuc,meknuc!239,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKnuc(erknuc!239,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_136 #Modifiers(ppMEKnuc_ERKnuc)
	R137: ERKnuc(erknuc,meknuc!239,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKnuc(erknuc!239,p~P,p2~P)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> 0  kf_137 #Modifiers(ppMEKnuc_ERKnuc)
	R138: ERKcyt(erkcyt!246,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKcyt(erkcyt!246,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> 0  kf_138 #Modifiers(dppERKcyt)
	R139: ERKcyt(erkcyt!246,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKcyt(erkcyt!246,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> ERKnuc(erknuc!247,meknuc,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKnuc(erknuc!247,meknuc,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + ERKcyt(erkcyt!246,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKcyt(erkcyt!246,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_139 #Modifiers(dppERKcyt)
	R140: ERKnuc(erknuc!247,meknuc,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKnuc(erknuc!247,meknuc,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> ERKcyt(erkcyt!246,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKcyt(erkcyt!246,mekcyt,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + ERKnuc(erknuc!247,meknuc,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKnuc(erknuc!247,meknuc,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_140 #Modifiers(dppERKnuc)
	R141: ERKnuc(erknuc!247,meknuc,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.ERKnuc(erknuc!247,meknuc,pp~PP)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> 0  kf_141 #Modifiers(dppERKnuc)
	R142: ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKcyt(erkcyt!238,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> 0  kf_142 #Modifiers(pMEKcyt_ERKcyt)
	R143: ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKcyt(erkcyt!238,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> ERKnuc(erknuc,meknuc!239,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKnuc(erknuc!239,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKcyt(erkcyt!238,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_143 #Modifiers(pMEKcyt_ERKcyt)
	R144: ERKnuc(erknuc,meknuc!239,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKnuc(erknuc!239,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> ERKcyt(erkcyt,mekcyt!238,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKcyt(erkcyt!238,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + ERKnuc(erknuc,meknuc!239,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKnuc(erknuc!239,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf kf_144 #Modifiers(pMEKnuc_ERKnuc)
	R145: ERKnuc(erknuc,meknuc!239,pp~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.MEKnuc(erknuc!239,p~P,p2~0)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> 0  kf_145 #Modifiers(pMEKnuc_ERKnuc)
	mwe8ee00ff_3d59_44d5_8d7f_a2074823f29d: 0  -> NGF(deg~0,ngfr,tz_deg)@mwc2fe3668_8fb0_4cfb_b795_99057e61e290 r145_mw7d6fb5c7_061a_49ff_99a2_d76de2f025f7 #Modifiers(mw4478fbeb_51b1_4764_92ad_a86d314ae0eb)
	mw711542fd_b235_40f7_9782_f78eb654d773: NGF(deg~0,ngfr,tz_deg)@mwc2fe3668_8fb0_4cfb_b795_99057e61e290 -> NGF(deg~DEG,ngfr,tz_deg)@mwc2fe3668_8fb0_4cfb_b795_99057e61e290 r146_mw65c9272f_da7a_4626_86c0_f834524601e6 #Modifiers(mw29fa4e00_a430_4f11_b62e_1bcbc0a767a0)
	mwc7ff2b7b_e2c9_4420_87bc_f285d98de30b: NGFR(NGFR_interstitial_fluid~NGFR_interstitial_fluid,_deg~0,ngf,trkai)@mwc2fe3668_8fb0_4cfb_b795_99057e61e290 + NGF(deg~0,ngfr,tz_deg)@mwc2fe3668_8fb0_4cfb_b795_99057e61e290 <-> NGFR(NGFR_interstitial_fluid~NGFR_interstitial_fluid,_deg~0,ngf!244,trkai)@mwc2fe3668_8fb0_4cfb_b795_99057e61e290.NGF(deg~0,ngfr!244,tz_deg)@mwc2fe3668_8fb0_4cfb_b795_99057e61e290 r147_mw4b2ef456_cb6c_46b8_919b_734f320058c1,r147_mw3d826840_83ab_4394_ae58_99f8d7180f29 #Modifiers(mwe979ec8f_a55c_470c_a554_9fa8013eab74, mw29fa4e00_a430_4f11_b62e_1bcbc0a767a0, mw6782adfa_29ee_41a8_acbb_4c86c6c81596)
	mw02775189_5c04_4c2f_a5f4_2f15723e1ece: NGF(deg~0,ngfr,tz_deg)@mwc2fe3668_8fb0_4cfb_b795_99057e61e290 + tz_deg(ngf,tanezumab~tanezumab)@mwc2fe3668_8fb0_4cfb_b795_99057e61e290 <-> NGF(deg~0,ngfr,tz_deg!242)@mwc2fe3668_8fb0_4cfb_b795_99057e61e290.tz_deg(ngf!242,tanezumab~tanezumab)@mwc2fe3668_8fb0_4cfb_b795_99057e61e290 r148_mw748e0940_792f_4420_8ece_0de52ecaa556,r148_mw87c66aa4_69ab_4cad_aa55_4b28455f804a #Modifiers(mw29fa4e00_a430_4f11_b62e_1bcbc0a767a0, mwe599c4c1_2d8e_446c_bf3f_4c97baced8a9, mw46e8693e_348e_4f1d_8c49_c13485fae7ba)
	mwfb02ea2a_1f06_4f8f_80a0_721149f213ff: tz_deg(ngf,tanezumab~tanezumab)@mwc2fe3668_8fb0_4cfb_b795_99057e61e290 -> tz_deg(ngf,tanezumab~0)@mwc2fe3668_8fb0_4cfb_b795_99057e61e290 r149_mw27805dbc_be23_402e_95ec_fab51829ca51 #Modifiers(mwe599c4c1_2d8e_446c_bf3f_4c97baced8a9)
	mw12b652db_d0da_4723_b160_001fa36f9190: trkaI(_deg~0,_int~0,ngfr,ptrka)@mwc2fe3668_8fb0_4cfb_b795_99057e61e290 -> trkaI(_deg~_DEG,_int~0,ngfr,ptrka)@mwc2fe3668_8fb0_4cfb_b795_99057e61e290 r150_mw2bbef0c4_48a5_4757_8f66_81da5c6894bd #Modifiers(mw89ebbe2d_1ec2_457a_9367_6c5e86a1a924)
	mwffc6fab3_9f90_4da4_bf71_214b9b723899: trkaI(_deg~0,_int~0,ngfr,ptrka)@mwc2fe3668_8fb0_4cfb_b795_99057e61e290 <-> trkaI(_deg~0,_int~_INT,ngfr,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate150(),fRate150m() #Modifiers(mw89ebbe2d_1ec2_457a_9367_6c5e86a1a924, mwd4cc05d6_6e19_4e2e_b540_45954f2df4f0)
	mwf371eb20_7bda_4140_9a43_dfad70900057: NGFR(NGFR_interstitial_fluid~NGFR_interstitial_fluid,_deg~0,ngf!244,trkai)@mwc2fe3668_8fb0_4cfb_b795_99057e61e290.NGF(deg~0,ngfr!244,tz_deg)@mwc2fe3668_8fb0_4cfb_b795_99057e61e290 <-> pTrkA(L_NGFR~L_NGFR,_deg~0,_endo~0,frs2,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf fRate151(),fRate151m() #Modifiers(mw6782adfa_29ee_41a8_acbb_4c86c6c81596, L_NGFR)
	mw8105f0dc_19ad_4f7a_80df_3f84de216c42: NGFR(NGFR_interstitial_fluid~0,_deg~0,ngf,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> NGFR(NGFR_interstitial_fluid~NGFR_interstitial_fluid,_deg~0,ngf,trkai)@mwc2fe3668_8fb0_4cfb_b795_99057e61e290 fRate152(),fRate152m() #Modifiers(NGFR, mwe979ec8f_a55c_470c_a554_9fa8013eab74)
	mw9da48a51_bbd0_4395_9883_8441d8153b00: pTrkA(L_NGFR~L_NGFR,_deg~0,_endo~0,frs2,shc,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + trkaI(_deg~0,_int~_INT,ngfr,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> pTrkA(L_NGFR~L_NGFR,_deg~0,_endo~0,frs2,shc,trkai!245)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.trkaI(_deg~0,_int~_INT,ngfr,ptrka!245)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf r154_mwfc8fe87e_6841_4214_9c2f_5d821794f38d,r154_mw3716109a_c83e_4fd4_911e_ccc67b036bb7 #Modifiers(L_NGFR, mwd4cc05d6_6e19_4e2e_b540_45954f2df4f0, mwe009ad7f_90fd_4186_8855_77780724ddb8)
	mwc467edb6_a255_45d6_8014_33bd0209b36f: trkaI(_deg~0,_int~_INT,ngfr,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf + NGFR(NGFR_interstitial_fluid~0,_deg~0,ngf,trkai)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf <-> NGFR(NGFR_interstitial_fluid~0,_deg~0,ngf,trkai!240)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.trkaI(_deg~0,_int~_INT,ngfr!240,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf r155_mwd74ca4a6_566f_4161_859e_2b05bf2851fc,r155_mw924e0439_7ac5_4812_b1c2_11e46b4737b8 #Modifiers(mwd4cc05d6_6e19_4e2e_b540_45954f2df4f0, NGFR, mw5afa8250_0cf0_40a2_a97a_f7cf20a9cfbd)
	mwe4f77287_e0fe_47f7_a74e_312151e578a4: NGFR(NGFR_interstitial_fluid~0,_deg~0,ngf,trkai!240)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.trkaI(_deg~0,_int~_INT,ngfr!240,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> NGFR(NGFR_interstitial_fluid~0,_deg~_DEG,ngf,trkai!240)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.trkaI(_deg~0,_int~_INT,ngfr!240,ptrka)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf r156_mwee585562_2580_4943_bd3e_731f12217004 #Modifiers(mw5afa8250_0cf0_40a2_a97a_f7cf20a9cfbd)
	mw4f0ee780_12f5_436d_a227_c5e7cd420259: pTrkA(L_NGFR~L_NGFR,_deg~0,_endo~0,frs2,shc,trkai!245)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.trkaI(_deg~0,_int~_INT,ngfr,ptrka!245)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf -> pTrkA(L_NGFR~L_NGFR,_deg~_DEG,_endo~0,frs2,shc,trkai!245)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf.trkaI(_deg~0,_int~_INT,ngfr,ptrka!245)@mw3bc142df_1951_4fa9_b0a7_011c95012bbf r157_mwfbeb575a_0864_4d0d_b862_240f7f6506c1 #Modifiers(mwe009ad7f_90fd_4186_8855_77780724ddb8)
end reaction rules
end model
