###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1512160000', 'http://identifiers.org/biomodels.db/BIOMD0000000590']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/26511837']
#@BQB_ENCODES:['http://identifiers.org/kegg.pathway/rn00240']
#@BQB_IS_DESCRIBED_BY:['http://identifiers.org/doi/doi:10.1186/s12862-015-0515-x']
#@creatorEmail:'mannakee@email.arizona.edu'
#@creatorName:'Mannakee Brian'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 9 molecules and 20 reactions. The translated model has 9 molecules and 20 rules'
###
begin model
begin parameters
	vmax1 3.61602627459517
	bc 1.52264278250403
	glu 0.54620785996429
	K_utp 1.413855257896
	K_q 0.05784981576165
	K_bc 2.3716657188714
	vmax2 2.44590712912244
	asp 0.0972544685826559
	atp 0.150650172583633
	K_atp 1.28940553329954
	K_m2 2.00489353757245
	vmax3 28.6613123782585
	K_m3 1.27179181717468
	vmax4 91.7802875108298
	K_m4 0.0160033122150611
	vmax5 5227.49670547203
	K_m5 0.0195216150005324
	prpp 0.181644900226225
	vmax6 34.9720846528477
	K_m6 20.3406449182435
	vmax10 6.55543523218919
	K_m10 0.0267841313759584
	vmax7 5.83104141997666
	K_m7 0.166382738667754
	g_pyr 0.198306450999093
	K_Mp 5.48714446027226
	vmax8 0.162943604164789
	K_m8 0.00435621076587497
	K_asp 0.168308889432487
	d 0.1
end parameters
begin molecule types
	#^ bqbiol:is kegg.compound:C00075, chebi:CHEBI:15713
	utp()
	#^ bqbiol:is kegg.compound:C00105, chebi:CHEBI:16695
	ump()
	#^ bqbiol:is kegg.compound:C00295, chebi:CHEBI:16742
	oro()
	#^ bqbiol:is kegg.compound:C00015, chebi:CHEBI:17659
	udp()
	#^ bqbiol:is kegg.compound:C00438, chebi:CHEBI:15859
	ca()
	#^ bqbiol:is kegg.compound:C00169, chebi:CHEBI:17672
	cp()
	#^ bqbiol:is kegg.compound:C01103, chebi:CHEBI:15842
	omp()
	#^ bqbiol:is kegg.compound:C00063, chebi:CHEBI:17677
	ctp()
	#^ bqbiol:is kegg.compound:C00337, chebi:CHEBI:17025
	dho()
end molecule types
begin seed species
	cp() 2.22814e+17 # (0.00037 * 0.001)mol/L * 6.022e23/mol *1.0L #cp #cp
	ca() 2.22814e+17 #original 0.00037substance/L  #ca #ca
	dho() 2.22814e+17 #original 0.00037substance/L  #dho #dho
	oro() 2.22814e+17 #original 0.00037substance/L  #oro #oro
	omp() 2.22814e+17 #original 0.00037substance/L  #omp #omp
	ump() 2.22814e+17 #original 0.00037substance/L  #ump #ump
	udp() 1.7379492e+18 #original 0.002886substance/L  #udp #udp
	utp() 4.0106520000000005e+18 #original 0.00666substance/L  #utp #utp
	ctp() 2.22814e+17 #original 0.00037substance/L  #ctp #ctp
end seed species
begin observables
	Species cp cp() #cp
	Species ca ca() #ca
	Species dho dho() #dho
	Species oro oro() #oro
	Species omp omp() #omp
	Species ump ump() #ump
	Species udp udp() #udp
	Species utp utp() #utp
	Species ctp ctp() #ctp
end observables
begin functions
	fRate0() = K_utp*atp*bc*glu*vmax1/(K_atp*K_bc*K_q*utp + K_atp*K_bc*glu*utp + K_atp*K_q*bc*utp + K_atp*bc*glu*utp + K_bc*K_q*atp*utp + K_bc*atp*glu*utp + K_q*atp*bc*utp + K_utp*(K_atp*K_bc*K_q + K_atp*K_bc*glu + K_atp*K_q*bc + K_atp*bc*glu + K_bc*K_q*atp + K_bc*atp*glu + K_q*atp*bc + atp*bc*glu) + atp*bc*glu*utp)
	fRate1() = K_utp*asp*vmax2/(K_asp*K_m2*utp + K_asp*cp*utp + K_m2*asp*utp + K_utp*(K_asp*K_m2 + K_asp*cp + K_m2*asp + asp*cp) + asp*cp*utp)
	fRate2() = vmax3/(K_m3 + ca)
	fRate3() = vmax4/(K_m4 + dho)
	fRate4() = prpp*vmax5/(K_m5 + oro*prpp)
	fRate5() = vmax6/(K_m6 + omp)
	fRate6() = vmax10/(K_m10 + ump)
	fRate7() = vmax7/(K_m7 + udp)
	fRate8() = g_pyr/(K_Mp + utp)
	fRate9() = vmax8/(K_m8 + utp)
	fRate10() = g_pyr/(K_Mp + ctp)
end functions
begin reaction rules
	r1: 0  -> cp() fRate0() #Modifiers(utp, utp)
	r2: cp() -> ca() fRate1() #Modifiers(utp, cp, utp)
	r3: ca() -> dho() fRate2() #Modifiers(ca)
	r4: dho() -> oro() fRate3() #Modifiers(dho)
	r5: oro() -> omp() fRate4() #Modifiers(oro)
	r6: omp() -> ump() fRate5() #Modifiers(omp)
	r10: ump() -> udp() fRate6() #Modifiers(ump)
	r7: udp() -> utp() fRate7() #Modifiers(udp)
	utp_degradation: utp() -> 0  fRate8() #Modifiers(utp)
	r8: utp() -> ctp() fRate9() #Modifiers(utp)
	ctp_degradation: ctp() -> 0  fRate10() #Modifiers(ctp)
	cp_dilution: cp() -> 0  d #Modifiers(cp)
	ca_dilution: ca() -> 0  d #Modifiers(ca)
	dho_dilution: dho() -> 0  d #Modifiers(dho)
	oro_dilution: oro() -> 0  d #Modifiers(oro)
	omp_dilution: omp() -> 0  d #Modifiers(omp)
	ump_dilution: ump() -> 0  d #Modifiers(ump)
	udp_dilution: udp() -> 0  d #Modifiers(udp)
	utp_dilution: utp() -> 0  d #Modifiers(utp)
	ctp_dilution: ctp() -> 0  d #Modifiers(ctp)
end reaction rules
end model
