###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1505190000', 'http://identifiers.org/biomodels.db/BIOMD0000000595']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/26264748']
#@BQB_HAS_PROPERTY:['http://identifiers.org/doid/DOID:162']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_OCCURS_IN:['http://identifiers.org/bto/BTO:0000567']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0007173']
#@creatorEmail:'fabrizio.capuani@ifom.eu'
#@creatorName:'Capuani Fabrizio'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 218 molecules and 1490 reactions. The translated model has 46 molecules and 1490 rules'
###
begin model
begin parameters
	RT 0.83
	CblT 0.01464
	Grb2T 3.32
	K 3.38608
	Ke 32.0
	K1 52.0
	kptp 0.016
	kkin 0.289502
	K45 0.201361
	Kcg 0.006356
	ku45 0.001011
	kucg 0.309271
	kb 5.0
	kc 10.0
	kuDIM 1.0546
	kbDIM 200.0
	k1u 0.15
	k1c 10.0
	PYMax 2.34537527177036
	UbMax 0.014306
	floc 20000.0
	CblWT 0.01464
	CblFactor 1.0
	Ltot 0
	m__00UU 3.927004187079568e+23 #original 0.652109629206172mol/L
	m__00UU 1.2271888084623665e+22 #original 0.0203784259126929mol/L
	m__00UU 9.48536932074195e+22 #original 0.157511944881135mol/L
end parameters
begin molecule types
	R12UL()
	R11CG()
	Rc11UL()
	Rc11CG()
	DiL12UL()
	Da12UL()
	DaL11UL()
	L12(L12UU~L12UU~0,lu~LU~0)
	RL12CG()
	RcL0()
	DiL1()
	#^ bqbiol:isVersionOf uniprot:P22681
	Cbl(_10uu,_11uu,_12uu,grb2,grb2)
	DaL12UL()
	DaL12CG()
	Di12UL()
	Da12CG()
	Di11UL()
	RcL12CG()
	L02UU()
	DiL11CG()
	DaL1()
	Di12CG()
	L10UU()
	#^ bqbiol:isVersionOf uniprot:P01133
	L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu)
	RcL12UL()
	DaL11CG()
	R12CG()
	RL12UL()
	Rc12UL()
	DaL0()
	#^ bqbiol:isVersionOf uniprot:P62993
	Grb2(_01uu,_02uu,_11uu,_12uu,cbl)
	L11(L11UU~L11UU~0,lu~LU~0)
	RcL11UL()
	DiL12CG()
	DiL11UL()
	Rc12CG()
	RcL1()
	RcL11CG()
	Da11CG()
	R11UL()
	RL11CG()
	Di11CG()
	Da11UL()
	DiL0()
	RL11UL()
	L01UU()
end molecule types
begin seed species
	Cbl(_10uu,_11uu,_12uu,grb2,grb2) 1.6920334542073352e+19 # 2.80975332814237e-05mol/L * 6.022e23/mol *1.0L #Cbl #Cbl
	Grb2(_01uu,_02uu,_11uu,_12uu,cbl) 1.999304e+24 #original 3.32mol/L #Grb2 #Grb2
	Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) 8.799287665457942e+21 #original 0.0146119024667186mol/L #CG #CG
end seed species
begin observables
	Species L L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) #L
	Species Cbl Cbl(_10uu,_11uu,_12uu,grb2,grb2) #Cbl
	Species Grb2 Grb2(_01uu,_02uu,_11uu,_12uu,cbl) #Grb2
	Species CG Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) #CG
	Species Rc11UL Rc11UL() #Rc11UL
	Species Rc11CG Rc11CG() #Rc11CG
	Species Rc12UL Rc12UL() #Rc12UL
	Species Rc12CG Rc12CG() #Rc12CG
	Species RcL00UU L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~C,da~0,di~0,l!163,r~R) #RcL00UU
	Species RcL10UU L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~C,cbl,da~0,di~0,l!162,r~R) #RcL10UU
	Species RcL10CU L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~C,cbl!156,da~0,di~0,l!162,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) #RcL10CU
	Species RcL10LU L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~C,cbl!156,da~0,di~0,l!162,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) #RcL10LU
	Species RcL01UU L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2,l!164,r~R) #RcL01UU
	Species RcL01UG L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2!158,l!164,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) #RcL01UG
	Species RcL01UL L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2!158,l!164,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) #RcL01UL
	Species RcL11UL RcL11UL() #RcL11UL
	Species RcL11CG RcL11CG() #RcL11CG
	Species RcL02UU L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2,l!166,r~R) #RcL02UU
	Species RcL02UG L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2!159,l!166,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) #RcL02UG
	Species RcL02UL L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2!159,l!166,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) #RcL02UL
	Species RcL12UL RcL12UL() #RcL12UL
	Species RcL12CG RcL12CG() #RcL12CG
	Species R11UL R11UL() #R11UL
	Species R11CG R11CG() #R11CG
	Species R12UL R12UL() #R12UL
	Species R12CG R12CG() #R12CG
	Species RL00UU L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~0,di~0,l!163,r~R) #RL00UU
	Species RL10UU L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~0,di~0,l!162,r~R) #RL10UU
	Species RL10CU L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~0,l!162,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) #RL10CU
	Species RL10LU L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~0,l!162,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) #RL10LU
	Species RL01UU L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2,l!164,r~R) #RL01UU
	Species RL01UG L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2!158,l!164,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) #RL01UG
	Species RL01UL L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2!158,l!164,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) #RL01UL
	Species RL11UL RL11UL() #RL11UL
	Species RL11CG RL11CG() #RL11CG
	Species RL02UU L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2,l!166,r~R) #RL02UU
	Species RL02UG L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2!159,l!166,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) #RL02UG
	Species RL02UL L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2!159,l!166,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) #RL02UL
	Species RL12UL RL12UL() #RL12UL
	Species RL12CG RL12CG() #RL12CG
	Species Di11UL Di11UL() #Di11UL
	Species Di11CG Di11CG() #Di11CG
	Species Di12UL Di12UL() #Di12UL
	Species Di12CG Di12CG() #Di12CG
	Species Da11UL Da11UL() #Da11UL
	Species Da11CG Da11CG() #Da11CG
	Species Da12UL Da12UL() #Da12UL
	Species Da12CG Da12CG() #Da12CG
	Species DiL00UU L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~0,di~DI,l!163,r~0) #DiL00UU
	Species DiL10UU L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~0,di~DI,l!162,r~0) #DiL10UU
	Species DiL10CU L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~DI,l!162,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) #DiL10CU
	Species DiL10LU L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~DI,l!162,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) #DiL10LU
	Species DiL01UU L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2,l!164,r~0) #DiL01UU
	Species DiL01UG L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2!158,l!164,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) #DiL01UG
	Species DiL01UL L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2!158,l!164,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) #DiL01UL
	Species DiL11UL DiL11UL() #DiL11UL
	Species DiL11CG DiL11CG() #DiL11CG
	Species DiL02UU L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2,l!166,r~0) #DiL02UU
	Species DiL02UG L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2!159,l!166,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) #DiL02UG
	Species DiL02UL L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2!159,l!166,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) #DiL02UL
	Species DiL12UL DiL12UL() #DiL12UL
	Species DiL12CG DiL12CG() #DiL12CG
	Species DaL00UU L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~DA,di~0,l!163,r~0) #DaL00UU
	Species DaL10UU L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~DA,di~0,l!162,r~0) #DaL10UU
	Species DaL10CU L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~DA,di~0,l!162,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) #DaL10CU
	Species DaL10LU L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~DA,di~0,l!162,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) #DaL10LU
	Species DaL01UU L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2,l!164,r~0) #DaL01UU
	Species DaL01UG L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2!158,l!164,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) #DaL01UG
	Species DaL01UL L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2!158,l!164,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) #DaL01UL
	Species DaL11UL DaL11UL() #DaL11UL
	Species DaL11CG DaL11CG() #DaL11CG
	Species DaL02UU L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2,l!166,r~0) #DaL02UU
	Species DaL02UG L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2!159,l!166,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) #DaL02UG
	Species DaL02UL L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2!159,l!166,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) #DaL02UL
	Species DaL12UL DaL12UL() #DaL12UL
	Species DaL12CG DaL12CG() #DaL12CG
end observables
begin functions
	kucgM() = kucg
	KcgP() = Kcg/floc
	kbcgP() = kucgM/KcgP
	K45P() = K45/floc
	ku45M() = ku45
	kb45P() = ku45M/K45P
	Ub_ar() = Da10CU + Da10LU + Da11CC + Da11CG + Da11CU + Da11LG + Da11LU + Da12CC + Da12CG + Da12CU + Da12LG + Da12LU + DaL10CU + DaL10LU + DaL11CC + DaL11CG + DaL11CU + DaL11LG + DaL11LU + DaL12CC + DaL12CG + DaL12CU + DaL12LG + DaL12LU + Di10CU + Di10LU + Di11CC + Di11CG + Di11CU + Di11LG + Di11LU + Di12CC + Di12CG + Di12CU + Di12LG + Di12LU + DiL10CU + DiL10LU + DiL11CC + DiL11CG + DiL11CU + DiL11LG + DiL11LU + DiL12CC + DiL12CG + DiL12CU + DiL12LG + DiL12LU + R10CU + R10LU + R11CC + R11CG + R11CU + R11LG + R11LU + R12CC + R12CG + R12CU + R12LG + R12LU + RL10CU + RL10LU + RL11CC + RL11CG + RL11CU + RL11LG + RL11LU + RL12CC + RL12CG + RL12CU + RL12LG + RL12LU + Rc10CU + Rc10LU + Rc11CC + Rc11CG + Rc11CU + Rc11LG + Rc11LU + Rc12CC + Rc12CG + Rc12CU + Rc12LG + Rc12LU + RcL10CU + RcL10LU + RcL11CC + RcL11CG + RcL11CU + RcL11LG + RcL11LU + RcL12CC + RcL12CG + RcL12CU + RcL12LG + RcL12LU
	UbNorm_ar() = Ub_ar/(CblFactor*UbMax)
	PY_ar() = Da01UG + Da01UL + Da01UU + 2*Da02UG + 2*Da02UL + 2*Da02UU + Da10CU + Da10LU + Da10UU + 2*Da11CC + 2*Da11CG + 2*Da11CU + 2*Da11LG + 2*Da11LU + 2*Da11UG + 2*Da11UL + 2*Da11UU + 3*Da12CC + 3*Da12CG + 3*Da12CU + 3*Da12LG + 3*Da12LU + 3*Da12UG + 3*Da12UL + 3*Da12UU + DaL01UG + DaL01UL + DaL01UU + 2*DaL02UG + 2*DaL02UL + 2*DaL02UU + DaL10CU + DaL10LU + DaL10UU + 2*DaL11CC + 2*DaL11CG + 2*DaL11CU + 2*DaL11LG + 2*DaL11LU + 2*DaL11UG + 2*DaL11UL + 2*DaL11UU + 3*DaL12CC + 3*DaL12CG + 3*DaL12CU + 3*DaL12LG + 3*DaL12LU + 3*DaL12UG + 3*DaL12UL + 3*DaL12UU + Di01UG + Di01UL + Di01UU + 2*Di02UG + 2*Di02UL + 2*Di02UU + Di10CU + Di10LU + Di10UU + 2*Di11CC + 2*Di11CG + 2*Di11CU + 2*Di11LG + 2*Di11LU + 2*Di11UG + 2*Di11UL + 2*Di11UU + 3*Di12CC + 3*Di12CG + 3*Di12CU + 3*Di12LG + 3*Di12LU + 3*Di12UG + 3*Di12UL + 3*Di12UU + DiL01UG + DiL01UL + DiL01UU + 2*DiL02UG + 2*DiL02UL + 2*DiL02UU + DiL10CU + DiL10LU + DiL10UU + 2*DiL11CC + 2*DiL11CG + 2*DiL11CU + 2*DiL11LG + 2*DiL11LU + 2*DiL11UG + 2*DiL11UL + 2*DiL11UU + 3*DiL12CC + 3*DiL12CG + 3*DiL12CU + 3*DiL12LG + 3*DiL12LU + 3*DiL12UG + 3*DiL12UL + 3*DiL12UU + R01UG + R01UL + R01UU + 2*R02UG + 2*R02UL + 2*R02UU + R10CU + R10LU + R10UU + 2*R11CC + 2*R11CG + 2*R11CU + 2*R11LG + 2*R11LU + 2*R11UG + 2*R11UL + 2*R11UU + 3*R12CC + 3*R12CG + 3*R12CU + 3*R12LG + 3*R12LU + 3*R12UG + 3*R12UL + 3*R12UU + RL01UG + RL01UL + RL01UU + 2*RL02UG + 2*RL02UL + 2*RL02UU + RL10CU + RL10LU + RL10UU + 2*RL11CC + 2*RL11CG + 2*RL11CU + 2*RL11LG + 2*RL11LU + 2*RL11UG + 2*RL11UL + 2*RL11UU + 3*RL12CC + 3*RL12CG + 3*RL12CU + 3*RL12LG + 3*RL12LU + 3*RL12UG + 3*RL12UL + 3*RL12UU + Rc01UG + Rc01UL + Rc01UU + 2*Rc02UG + 2*Rc02UL + 2*Rc02UU + Rc10CU + Rc10LU + Rc10UU + 2*Rc11CC + 2*Rc11CG + 2*Rc11CU + 2*Rc11LG + 2*Rc11LU + 2*Rc11UG + 2*Rc11UL + 2*Rc11UU + 3*Rc12CC + 3*Rc12CG + 3*Rc12CU + 3*Rc12LG + 3*Rc12LU + 3*Rc12UG + 3*Rc12UL + 3*Rc12UU + RcL01UG + RcL01UL + RcL01UU + 2*RcL02UG + 2*RcL02UL + 2*RcL02UU + RcL10CU + RcL10LU + RcL10UU + 2*RcL11CC + 2*RcL11CG + 2*RcL11CU + 2*RcL11LG + 2*RcL11LU + 2*RcL11UG + 2*RcL11UL + 2*RcL11UU + 3*RcL12CC + 3*RcL12CG + 3*RcL12CU + 3*RcL12LG + 3*RcL12LU + 3*RcL12UG + 3*RcL12UL + 3*RcL12UU
	PYNorm_ar() = PY_ar/PYMax
	ku68M() = ku45M
	kb68P() = kb45P
	kb45() = ku45/K45
	kb68() = kb45
	Ke1() = K*Ke/K1
	k1o() = k1c/Ke1
	SumML_ar() = RL00UU + RL01UG + RL01UL + RL01UU + RL02UG + RL02UL + RL02UU + RL10CU + RL10LU + RL10UU + RL11CC + RL11CG + RL11CU + RL11LG + RL11LU + RL11UG + RL11UL + RL11UU + RL12CC + RL12CG + RL12CU + RL12LG + RL12LU + RL12UG + RL12UL + RL12UU
	SumM_ar() = R00UU + R01UG + R01UL + R01UU + R02UG + R02UL + R02UU + R10CU + R10LU + R10UU + R11CC + R11CG + R11CU + R11LG + R11LU + R11UG + R11UL + R11UU + R12CC + R12CG + R12CU + R12LG + R12LU + R12UG + R12UL + R12UU
	kbcg() = kucg/Kcg
	ku68() = ku45
	kptp68() = kptp
	kkin68() = kkin
	k1b() = k1u/K1
	ko() = kc/Ke
	ku() = K*kb
	fRate8() = 2.0*kptp68
	fRate12() = 2.0*kptp68
	fRate13() = 2.0*kptp68
	fRate14() = 2.0*kptp68
	fRate30() = 2.0*kptp68
	fRate34() = 2.0*kptp68
	fRate35() = 2.0*kptp68
	fRate36() = 2.0*kptp68
	fRate52() = 2.0*kptp68
	fRate56() = 2.0*kptp68
	fRate57() = 2.0*kptp68
	fRate58() = 2.0*kptp68
	fRate74() = 2.0*kptp68
	fRate78() = 2.0*kptp68
	fRate79() = 2.0*kptp68
	fRate80() = 2.0*kptp68
	fRate96() = 2.0*kptp68
	fRate100() = 2.0*kptp68
	fRate101() = 2.0*kptp68
	fRate102() = 2.0*kptp68
	fRate118() = 2.0*kptp68
	fRate122() = 2.0*kptp68
	fRate123() = 2.0*kptp68
	fRate124() = 2.0*kptp68
	fRate140() = 2.0*kptp68
	fRate144() = 2.0*kptp68
	fRate145() = 2.0*kptp68
	fRate146() = 2.0*kptp68
	fRate162() = 2.0*kptp68
	fRate166() = 2.0*kptp68
	fRate167() = 2.0*kptp68
	fRate168() = 2.0*kptp68
	fRate177() = 2.0*kkin68
	fRate178() = 2.0*kkin68
	fRate179() = 2.0*kkin68
	fRate180() = 2.0*kkin68
	fRate199() = 2.0*kkin68
	fRate200() = 2.0*kkin68
	fRate201() = 2.0*kkin68
	fRate202() = 2.0*kkin68
	fRate262() = 2.0*kb68
	fRate264() = 2.0*kb68
	fRate272() = 2.0*kb68
	fRate274() = 2.0*kb68
	fRate278() = 2.0*kb68
	fRate280() = 2.0*kb68
	fRate282() = 2.0*kb68P
	fRate336() = 2.0*kb68
	fRate338() = 2.0*kb68
	fRate346() = 2.0*kb68
	fRate348() = 2.0*kb68
	fRate352() = 2.0*kb68
	fRate354() = 2.0*kb68
	fRate356() = 2.0*kb68P
	fRate410() = 2.0*kb68
	fRate412() = 2.0*kb68
	fRate420() = 2.0*kb68
	fRate422() = 2.0*kb68
	fRate426() = 2.0*kb68
	fRate428() = 2.0*kb68
	fRate430() = 2.0*kb68P
	fRate484() = 2.0*kb68
	fRate486() = 2.0*kb68
	fRate494() = 2.0*kb68
	fRate496() = 2.0*kb68
	fRate500() = 2.0*kb68
	fRate502() = 2.0*kb68
	fRate504() = 2.0*kb68P
	fRate558() = 2.0*kb68
	fRate560() = 2.0*kb68
	fRate568() = 2.0*kb68
	fRate570() = 2.0*kb68
	fRate574() = 2.0*kb68
	fRate576() = 2.0*kb68
	fRate578() = 2.0*kb68P
	fRate632() = 2.0*kb68
	fRate634() = 2.0*kb68
	fRate642() = 2.0*kb68
	fRate644() = 2.0*kb68
	fRate648() = 2.0*kb68
	fRate650() = 2.0*kb68
	fRate652() = 2.0*kb68P
	fRate706() = 2.0*kb68
	fRate708() = 2.0*kb68
	fRate716() = 2.0*kb68
	fRate718() = 2.0*kb68
	fRate722() = 2.0*kb68
	fRate724() = 2.0*kb68
	fRate726() = 2.0*kb68P
	fRate780() = 2.0*kb68
	fRate782() = 2.0*kb68
	fRate790() = 2.0*kb68
	fRate792() = 2.0*kb68
	fRate796() = 2.0*kb68
	fRate798() = 2.0*kb68
	fRate800() = 2.0*kb68P
	fRate970() = L*kb
	fRate971() = L*kb
	fRate972() = L*kb
	fRate973() = L*kb
	fRate974() = L*kb
	fRate975() = L*kb
	fRate976() = L*kb
	fRate977() = L*kb
	fRate978() = L*kb
	fRate979() = L*kb
	fRate980() = L*kb
	fRate981() = L*kb
	fRate982() = L*kb
	fRate983() = L*kb
	fRate984() = L*kb
	fRate985() = L*kb
	fRate986() = L*kb
	fRate987() = L*kb
	fRate988() = L*kb
	fRate989() = L*kb
	fRate990() = L*kb
	fRate991() = L*kb
	fRate992() = L*kb
	fRate993() = L*kb
	fRate994() = L*kb
	fRate995() = L*kb
	fRate1048() = L*kb
	fRate1049() = L*kb
	fRate1050() = L*kb
	fRate1051() = L*kb
	fRate1052() = L*kb
	fRate1053() = L*kb
	fRate1054() = L*kb
	fRate1055() = L*kb
	fRate1056() = L*kb
	fRate1057() = L*kb
	fRate1058() = L*kb
	fRate1059() = L*kb
	fRate1060() = L*kb
	fRate1061() = L*kb
	fRate1062() = L*kb
	fRate1063() = L*kb
	fRate1064() = L*kb
	fRate1065() = L*kb
	fRate1066() = L*kb
	fRate1067() = L*kb
	fRate1068() = L*kb
	fRate1069() = L*kb
	fRate1070() = L*kb
	fRate1071() = L*kb
	fRate1072() = L*kb
	fRate1073() = L*kb
	fRate1230() = SumM_ar*kbDIM
	fRate1231() = SumM_ar*kbDIM
	fRate1232() = SumM_ar*kbDIM
	fRate1233() = SumM_ar*kbDIM
	fRate1234() = SumM_ar*kbDIM
	fRate1235() = SumM_ar*kbDIM
	fRate1236() = SumM_ar*kbDIM
	fRate1237() = SumM_ar*kbDIM
	fRate1238() = SumM_ar*kbDIM
	fRate1239() = SumM_ar*kbDIM
	fRate1240() = SumM_ar*kbDIM
	fRate1241() = SumM_ar*kbDIM
	fRate1242() = SumM_ar*kbDIM
	fRate1243() = SumM_ar*kbDIM
	fRate1244() = SumM_ar*kbDIM
	fRate1245() = SumM_ar*kbDIM
	fRate1246() = SumM_ar*kbDIM
	fRate1247() = SumM_ar*kbDIM
	fRate1248() = SumM_ar*kbDIM
	fRate1249() = SumM_ar*kbDIM
	fRate1250() = SumM_ar*kbDIM
	fRate1251() = SumM_ar*kbDIM
	fRate1252() = SumM_ar*kbDIM
	fRate1253() = SumM_ar*kbDIM
	fRate1254() = SumM_ar*kbDIM
	fRate1255() = SumM_ar*kbDIM
	fRate1256() = SumML_ar*kbDIM
	fRate1257() = SumML_ar*kbDIM
	fRate1258() = SumML_ar*kbDIM
	fRate1259() = SumML_ar*kbDIM
	fRate1260() = SumML_ar*kbDIM
	fRate1261() = SumML_ar*kbDIM
	fRate1262() = SumML_ar*kbDIM
	fRate1263() = SumML_ar*kbDIM
	fRate1264() = SumML_ar*kbDIM
	fRate1265() = SumML_ar*kbDIM
	fRate1266() = SumML_ar*kbDIM
	fRate1267() = SumML_ar*kbDIM
	fRate1268() = SumML_ar*kbDIM
	fRate1269() = SumML_ar*kbDIM
	fRate1270() = SumML_ar*kbDIM
	fRate1271() = SumML_ar*kbDIM
	fRate1272() = SumML_ar*kbDIM
	fRate1273() = SumML_ar*kbDIM
	fRate1274() = SumML_ar*kbDIM
	fRate1275() = SumML_ar*kbDIM
	fRate1276() = SumML_ar*kbDIM
	fRate1277() = SumML_ar*kbDIM
	fRate1278() = SumML_ar*kbDIM
	fRate1279() = SumML_ar*kbDIM
	fRate1280() = SumML_ar*kbDIM
	fRate1281() = SumML_ar*kbDIM
	fRate1282() = SumM_ar*kbDIM
	fRate1283() = SumM_ar*kbDIM
	fRate1284() = SumM_ar*kbDIM
	fRate1285() = SumM_ar*kbDIM
	fRate1286() = SumM_ar*kbDIM
	fRate1287() = SumM_ar*kbDIM
	fRate1288() = SumM_ar*kbDIM
	fRate1289() = SumM_ar*kbDIM
	fRate1290() = SumM_ar*kbDIM
	fRate1291() = SumM_ar*kbDIM
	fRate1292() = SumM_ar*kbDIM
	fRate1293() = SumM_ar*kbDIM
	fRate1294() = SumM_ar*kbDIM
	fRate1295() = SumM_ar*kbDIM
	fRate1296() = SumM_ar*kbDIM
	fRate1297() = SumM_ar*kbDIM
	fRate1298() = SumM_ar*kbDIM
	fRate1299() = SumM_ar*kbDIM
	fRate1300() = SumM_ar*kbDIM
	fRate1301() = SumM_ar*kbDIM
	fRate1302() = SumM_ar*kbDIM
	fRate1303() = SumM_ar*kbDIM
	fRate1304() = SumM_ar*kbDIM
	fRate1305() = SumM_ar*kbDIM
	fRate1306() = SumM_ar*kbDIM
	fRate1307() = SumM_ar*kbDIM
	fRate1308() = SumML_ar*kbDIM
	fRate1309() = SumML_ar*kbDIM
	fRate1310() = SumML_ar*kbDIM
	fRate1311() = SumML_ar*kbDIM
	fRate1312() = SumML_ar*kbDIM
	fRate1313() = SumML_ar*kbDIM
	fRate1314() = SumML_ar*kbDIM
	fRate1315() = SumML_ar*kbDIM
	fRate1316() = SumML_ar*kbDIM
	fRate1317() = SumML_ar*kbDIM
	fRate1318() = SumML_ar*kbDIM
	fRate1319() = SumML_ar*kbDIM
	fRate1320() = SumML_ar*kbDIM
	fRate1321() = SumML_ar*kbDIM
	fRate1322() = SumML_ar*kbDIM
	fRate1323() = SumML_ar*kbDIM
	fRate1324() = SumML_ar*kbDIM
	fRate1325() = SumML_ar*kbDIM
	fRate1326() = SumML_ar*kbDIM
	fRate1327() = SumML_ar*kbDIM
	fRate1328() = SumML_ar*kbDIM
	fRate1329() = SumML_ar*kbDIM
	fRate1330() = SumML_ar*kbDIM
	fRate1331() = SumML_ar*kbDIM
	fRate1332() = SumML_ar*kbDIM
	fRate1333() = SumML_ar*kbDIM
	fRate1438() = R00UU*kbDIM
	fRate1439() = R10UU*kbDIM
	fRate1440() = R10CU*kbDIM
	fRate1441() = R10LU*kbDIM
	fRate1442() = R01UU*kbDIM
	fRate1443() = R01UG*kbDIM
	fRate1444() = R01UL*kbDIM
	fRate1445() = R11UU*kbDIM
	fRate1446() = R11CU*kbDIM
	fRate1447() = R11LU*kbDIM
	fRate1448() = R11UG*kbDIM
	fRate1449() = R11UL*kbDIM
	fRate1450() = R11CG*kbDIM
	fRate1451() = R11CC*kbDIM
	fRate1452() = R11LG*kbDIM
	fRate1453() = R02UU*kbDIM
	fRate1454() = R02UG*kbDIM
	fRate1455() = R02UL*kbDIM
	fRate1456() = R12UU*kbDIM
	fRate1457() = R12CU*kbDIM
	fRate1458() = R12LU*kbDIM
	fRate1459() = R12UG*kbDIM
	fRate1460() = R12UL*kbDIM
	fRate1461() = R12CG*kbDIM
	fRate1462() = R12CC*kbDIM
	fRate1463() = R12LG*kbDIM
	fRate1464() = RL00UU*kbDIM
	fRate1465() = RL10UU*kbDIM
	fRate1466() = RL10CU*kbDIM
	fRate1467() = RL10LU*kbDIM
	fRate1468() = RL01UU*kbDIM
	fRate1469() = RL01UG*kbDIM
	fRate1470() = RL01UL*kbDIM
	fRate1471() = RL11UU*kbDIM
	fRate1472() = RL11CU*kbDIM
	fRate1473() = RL11LU*kbDIM
	fRate1474() = RL11UG*kbDIM
	fRate1475() = RL11UL*kbDIM
	fRate1476() = RL11CG*kbDIM
	fRate1477() = RL11CC*kbDIM
	fRate1478() = RL11LG*kbDIM
	fRate1479() = RL02UU*kbDIM
	fRate1480() = RL02UG*kbDIM
	fRate1481() = RL02UL*kbDIM
	fRate1482() = RL12UU*kbDIM
	fRate1483() = RL12CU*kbDIM
	fRate1484() = RL12LU*kbDIM
	fRate1485() = RL12UG*kbDIM
	fRate1486() = RL12UL*kbDIM
	fRate1487() = RL12CG*kbDIM
	fRate1488() = RL12CC*kbDIM
	fRate1489() = RL12LG*kbDIM
end functions
begin reaction rules
	r1: m__10UU(c~C,cbl,da~0,di~0,l,r~R) -> m__00UU(c~C,da~0,di~0,l,r~R) kptp #Modifiers(Rc10UU)
	r2: m__01UU(c~C,da~0,di~0,grb2,l,r~R) -> m__00UU(c~C,da~0,di~0,l,r~R) kptp68 #Modifiers(Rc01UU)
	r3: m__11UU(c~C,cbl,da~0,di~0,grb2,grb2,l,r~R) -> m__01UU(c~C,da~0,di~0,grb2,l,r~R) kptp #Modifiers(Rc11UU)
	r4: m__11UU(c~C,cbl,da~0,di~0,grb2,grb2,l,r~R) -> m__10UU(c~C,cbl,da~0,di~0,l,r~R) kptp68 #Modifiers(Rc11UU)
	r5: m__11UU(c~C,cbl!155,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__10UU(c~C,cbl!156,da~0,di~0,l,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) kptp68 #Modifiers(Rc11CU)
	r6: m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__10UU(c~C,cbl!156,da~0,di~0,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) kptp68 #Modifiers(Rc11LU)
	r7: m__11UU(c~C,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__01UU(c~C,da~0,di~0,grb2!158,l,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kptp #Modifiers(Rc11UG)
	r8: Rc11UL() -> m__01UU(c~C,da~0,di~0,grb2!158,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kptp #Modifiers(Rc11UL)
	r9: m__02UU(c~C,da~0,di~0,grb2,l,r~R) -> m__01UU(c~C,da~0,di~0,grb2,l,r~R) fRate8() #Modifiers(Rc02UU)
	r10: m__02UU(c~C,da~0,di~0,grb2!159,l,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> m__01UU(c~C,da~0,di~0,grb2!158,l,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kptp68 #Modifiers(Rc02UG)
	r11: m__02UU(c~C,da~0,di~0,grb2!159,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> m__01UU(c~C,da~0,di~0,grb2!158,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kptp68 #Modifiers(Rc02UL)
	r12: m__12UU(c~C,cbl,da~0,di~0,grb2,grb2,l,r~R) -> m__02UU(c~C,da~0,di~0,grb2,l,r~R) kptp #Modifiers(Rc12UU)
	r13: m__12UU(c~C,cbl,da~0,di~0,grb2,grb2,l,r~R) -> m__11UU(c~C,cbl,da~0,di~0,grb2,grb2,l,r~R) fRate12() #Modifiers(Rc12UU)
	r14: m__12UU(c~C,cbl!160,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__11UU(c~C,cbl!155,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) fRate13() #Modifiers(Rc12CU)
	r15: m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) fRate14() #Modifiers(Rc12LU)
	r16: m__12UU(c~C,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__02UU(c~C,da~0,di~0,grb2!159,l,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) kptp #Modifiers(Rc12UG)
	r17: m__12UU(c~C,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__11UU(c~C,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kptp68 #Modifiers(Rc12UG)
	r18: Rc12UL() -> m__02UU(c~C,da~0,di~0,grb2!159,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) kptp #Modifiers(Rc12UL)
	r19: Rc12UL() -> Rc11UL() kptp68 #Modifiers(Rc12UL)
	r20: Rc12CG() -> Rc11CG() kptp68 #Modifiers(Rc12CG)
	r21: m__12C(_12CU~0,c~C,c2~C,da~0,di~0,l,lu~0,r~R) -> m__11C(_11CU~0,c~C,c2~C,da~0,di~0,l,lu~0,r~R) kptp68 #Modifiers(Rc12CC)
	r22: m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) kptp68 #Modifiers(Rc12LG)
	r23: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~C,cbl,da~0,di~0,l!162,r~R) -> L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~C,da~0,di~0,l!163,r~R) kptp #Modifiers(RcL10UU)
	r24: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2,l!164,r~R) -> L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~C,da~0,di~0,l!163,r~R) kptp68 #Modifiers(RcL01UU)
	r25: m__11UU(c~C,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2,l!164,r~R) kptp #Modifiers(RcL11UU)
	r26: m__11UU(c~C,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~C,cbl,da~0,di~0,l!162,r~R) kptp68 #Modifiers(RcL11UU)
	r27: m__11UU(c~C,cbl!155,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~C,cbl!156,da~0,di~0,l!162,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) kptp68 #Modifiers(RcL11CU)
	r28: m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~C,cbl!156,da~0,di~0,l!162,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) kptp68 #Modifiers(RcL11LU)
	r29: m__11UU(c~C,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2!158,l!164,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kptp #Modifiers(RcL11UG)
	r30: RcL11UL() -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2!158,l!164,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kptp #Modifiers(RcL11UL)
	r31: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2,l!166,r~R) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2,l!164,r~R) fRate30() #Modifiers(RcL02UU)
	r32: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2!159,l!166,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2!158,l!164,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kptp68 #Modifiers(RcL02UG)
	r33: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2!159,l!166,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2!158,l!164,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kptp68 #Modifiers(RcL02UL)
	r34: m__12UU(c~C,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2,l!166,r~R) kptp #Modifiers(RcL12UU)
	r35: m__12UU(c~C,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> m__11UU(c~C,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) fRate34() #Modifiers(RcL12UU)
	r36: m__12UU(c~C,cbl!160,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__11UU(c~C,cbl!155,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) fRate35() #Modifiers(RcL12CU)
	r37: m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) fRate36() #Modifiers(RcL12LU)
	r38: m__12UU(c~C,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2!159,l!166,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) kptp #Modifiers(RcL12UG)
	r39: m__12UU(c~C,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__11UU(c~C,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kptp68 #Modifiers(RcL12UG)
	r40: RcL12UL() -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2!159,l!166,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) kptp #Modifiers(RcL12UL)
	r41: RcL12UL() -> RcL11UL() kptp68 #Modifiers(RcL12UL)
	r42: RcL12CG() -> RcL11CG() kptp68 #Modifiers(RcL12CG)
	r43: m__12C(_12CU~0,c~C,c2~C,da~0,di~0,l!168,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) -> m__11C(_11CU~0,c~C,c2~C,da~0,di~0,l!169,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) kptp68 #Modifiers(RcL12CC)
	r44: m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2!170,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) -> m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2!171,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) kptp68 #Modifiers(RcL12LG)
	r45: m__10UU(c~0,cbl,da~0,di~0,l,r~R) -> m__00UU(c~0,da~0,di~0,l,r~R) kptp #Modifiers(R10UU)
	r46: m__01UU(c~0,da~0,di~0,grb2,l,r~R) -> m__00UU(c~0,da~0,di~0,l,r~R) kptp68 #Modifiers(R01UU)
	r47: m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) -> m__01UU(c~0,da~0,di~0,grb2,l,r~R) kptp #Modifiers(R11UU)
	r48: m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) -> m__10UU(c~0,cbl,da~0,di~0,l,r~R) kptp68 #Modifiers(R11UU)
	r49: m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__10UU(c~0,cbl!156,da~0,di~0,l,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) kptp68 #Modifiers(R11CU)
	r50: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__10UU(c~0,cbl!156,da~0,di~0,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) kptp68 #Modifiers(R11LU)
	r51: m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__01UU(c~0,da~0,di~0,grb2!158,l,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kptp #Modifiers(R11UG)
	r52: R11UL() -> m__01UU(c~0,da~0,di~0,grb2!158,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kptp #Modifiers(R11UL)
	r53: m__02UU(c~0,da~0,di~0,grb2,l,r~R) -> m__01UU(c~0,da~0,di~0,grb2,l,r~R) fRate52() #Modifiers(R02UU)
	r54: m__02UU(c~0,da~0,di~0,grb2!159,l,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> m__01UU(c~0,da~0,di~0,grb2!158,l,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kptp68 #Modifiers(R02UG)
	r55: m__02UU(c~0,da~0,di~0,grb2!159,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> m__01UU(c~0,da~0,di~0,grb2!158,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kptp68 #Modifiers(R02UL)
	r56: m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) -> m__02UU(c~0,da~0,di~0,grb2,l,r~R) kptp #Modifiers(R12UU)
	r57: m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) -> m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) fRate56() #Modifiers(R12UU)
	r58: m__12UU(c~0,cbl!160,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) fRate57() #Modifiers(R12CU)
	r59: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) fRate58() #Modifiers(R12LU)
	r60: m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__02UU(c~0,da~0,di~0,grb2!159,l,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) kptp #Modifiers(R12UG)
	r61: m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kptp68 #Modifiers(R12UG)
	r62: R12UL() -> m__02UU(c~0,da~0,di~0,grb2!159,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) kptp #Modifiers(R12UL)
	r63: R12UL() -> R11UL() kptp68 #Modifiers(R12UL)
	r64: R12CG() -> R11CG() kptp68 #Modifiers(R12CG)
	r65: m__12C(_12CU~0,c~C,c2~0,da~0,di~0,l,lu~0,r~R) -> m__11C(_11CU~0,c~C,c2~0,da~0,di~0,l,lu~0,r~R) kptp68 #Modifiers(R12CC)
	r66: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) kptp68 #Modifiers(R12LG)
	r67: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~0,di~0,l!162,r~R) -> L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~0,di~0,l!163,r~R) kptp #Modifiers(RL10UU)
	r68: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2,l!164,r~R) -> L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~0,di~0,l!163,r~R) kptp68 #Modifiers(RL01UU)
	r69: m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2,l!164,r~R) kptp #Modifiers(RL11UU)
	r70: m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~0,di~0,l!162,r~R) kptp68 #Modifiers(RL11UU)
	r71: m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~0,l!162,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) kptp68 #Modifiers(RL11CU)
	r72: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~0,l!162,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) kptp68 #Modifiers(RL11LU)
	r73: m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2!158,l!164,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kptp #Modifiers(RL11UG)
	r74: RL11UL() -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2!158,l!164,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kptp #Modifiers(RL11UL)
	r75: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2,l!166,r~R) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2,l!164,r~R) fRate74() #Modifiers(RL02UU)
	r76: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2!159,l!166,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2!158,l!164,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kptp68 #Modifiers(RL02UG)
	r77: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2!159,l!166,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2!158,l!164,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kptp68 #Modifiers(RL02UL)
	r78: m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2,l!166,r~R) kptp #Modifiers(RL12UU)
	r79: m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) fRate78() #Modifiers(RL12UU)
	r80: m__12UU(c~0,cbl!160,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) fRate79() #Modifiers(RL12CU)
	r81: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) fRate80() #Modifiers(RL12LU)
	r82: m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2!159,l!166,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) kptp #Modifiers(RL12UG)
	r83: m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kptp68 #Modifiers(RL12UG)
	r84: RL12UL() -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2!159,l!166,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) kptp #Modifiers(RL12UL)
	r85: RL12UL() -> RL11UL() kptp68 #Modifiers(RL12UL)
	r86: RL12CG() -> RL11CG() kptp68 #Modifiers(RL12CG)
	r87: m__12C(_12CU~0,c~C,c2~0,da~0,di~0,l!168,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) -> m__11C(_11CU~0,c~C,c2~0,da~0,di~0,l!169,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) kptp68 #Modifiers(RL12CC)
	r88: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2!170,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2!171,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) kptp68 #Modifiers(RL12LG)
	r89: m__10UU(c~0,cbl,da~0,di~DI,l,r~0) -> m__00UU(c~0,da~0,di~DI,l,r~0) kptp #Modifiers(Di10UU)
	r90: m__01UU(c~0,da~0,di~DI,grb2,l,r~0) -> m__00UU(c~0,da~0,di~DI,l,r~0) kptp68 #Modifiers(Di01UU)
	r91: m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) -> m__01UU(c~0,da~0,di~DI,grb2,l,r~0) kptp #Modifiers(Di11UU)
	r92: m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) -> m__10UU(c~0,cbl,da~0,di~DI,l,r~0) kptp68 #Modifiers(Di11UU)
	r93: m__11UU(c~0,cbl!155,da~0,di~DI,grb2,grb2,l,r~0).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__10UU(c~0,cbl!156,da~0,di~DI,l,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) kptp68 #Modifiers(Di11CU)
	r94: m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__10UU(c~0,cbl!156,da~0,di~DI,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) kptp68 #Modifiers(Di11LU)
	r95: m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__01UU(c~0,da~0,di~DI,grb2!158,l,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kptp #Modifiers(Di11UG)
	r96: Di11UL() -> m__01UU(c~0,da~0,di~DI,grb2!158,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kptp #Modifiers(Di11UL)
	r97: m__02UU(c~0,da~0,di~DI,grb2,l,r~0) -> m__01UU(c~0,da~0,di~DI,grb2,l,r~0) fRate96() #Modifiers(Di02UU)
	r98: m__02UU(c~0,da~0,di~DI,grb2!159,l,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> m__01UU(c~0,da~0,di~DI,grb2!158,l,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kptp68 #Modifiers(Di02UG)
	r99: m__02UU(c~0,da~0,di~DI,grb2!159,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> m__01UU(c~0,da~0,di~DI,grb2!158,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kptp68 #Modifiers(Di02UL)
	r100: m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) -> m__02UU(c~0,da~0,di~DI,grb2,l,r~0) kptp #Modifiers(Di12UU)
	r101: m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) -> m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) fRate100() #Modifiers(Di12UU)
	r102: m__12UU(c~0,cbl!160,da~0,di~DI,grb2,grb2,l,r~0).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2,grb2,l,r~0).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) fRate101() #Modifiers(Di12CU)
	r103: m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) fRate102() #Modifiers(Di12LU)
	r104: m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__02UU(c~0,da~0,di~DI,grb2!159,l,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) kptp #Modifiers(Di12UG)
	r105: m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kptp68 #Modifiers(Di12UG)
	r106: Di12UL() -> m__02UU(c~0,da~0,di~DI,grb2!159,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) kptp #Modifiers(Di12UL)
	r107: Di12UL() -> Di11UL() kptp68 #Modifiers(Di12UL)
	r108: Di12CG() -> Di11CG() kptp68 #Modifiers(Di12CG)
	r109: m__12C(_12CU~0,c~C,c2~0,da~0,di~DI,l,lu~0,r~0) -> m__11C(_11CU~0,c~C,c2~0,da~0,di~DI,l,lu~0,r~0) kptp68 #Modifiers(Di12CC)
	r110: m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) kptp68 #Modifiers(Di12LG)
	r111: m__10UU(c~0,cbl,da~DA,di~0,l,r~0) -> m__00UU(c~0,da~DA,di~0,l,r~0) kptp #Modifiers(Da10UU)
	r112: m__01UU(c~0,da~DA,di~0,grb2,l,r~0) -> m__00UU(c~0,da~DA,di~0,l,r~0) kptp68 #Modifiers(Da01UU)
	r113: m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) -> m__01UU(c~0,da~DA,di~0,grb2,l,r~0) kptp #Modifiers(Da11UU)
	r114: m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) -> m__10UU(c~0,cbl,da~DA,di~0,l,r~0) kptp68 #Modifiers(Da11UU)
	r115: m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l,r~0).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__10UU(c~0,cbl!156,da~DA,di~0,l,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) kptp68 #Modifiers(Da11CU)
	r116: m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__10UU(c~0,cbl!156,da~DA,di~0,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) kptp68 #Modifiers(Da11LU)
	r117: m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__01UU(c~0,da~DA,di~0,grb2!158,l,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kptp #Modifiers(Da11UG)
	r118: Da11UL() -> m__01UU(c~0,da~DA,di~0,grb2!158,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kptp #Modifiers(Da11UL)
	r119: m__02UU(c~0,da~DA,di~0,grb2,l,r~0) -> m__01UU(c~0,da~DA,di~0,grb2,l,r~0) fRate118() #Modifiers(Da02UU)
	r120: m__02UU(c~0,da~DA,di~0,grb2!159,l,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> m__01UU(c~0,da~DA,di~0,grb2!158,l,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kptp68 #Modifiers(Da02UG)
	r121: m__02UU(c~0,da~DA,di~0,grb2!159,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> m__01UU(c~0,da~DA,di~0,grb2!158,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kptp68 #Modifiers(Da02UL)
	r122: m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) -> m__02UU(c~0,da~DA,di~0,grb2,l,r~0) kptp #Modifiers(Da12UU)
	r123: m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) -> m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) fRate122() #Modifiers(Da12UU)
	r124: m__12UU(c~0,cbl!160,da~DA,di~0,grb2,grb2,l,r~0).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l,r~0).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) fRate123() #Modifiers(Da12CU)
	r125: m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) fRate124() #Modifiers(Da12LU)
	r126: m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__02UU(c~0,da~DA,di~0,grb2!159,l,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) kptp #Modifiers(Da12UG)
	r127: m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kptp68 #Modifiers(Da12UG)
	r128: Da12UL() -> m__02UU(c~0,da~DA,di~0,grb2!159,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) kptp #Modifiers(Da12UL)
	r129: Da12UL() -> Da11UL() kptp68 #Modifiers(Da12UL)
	r130: Da12CG() -> Da11CG() kptp68 #Modifiers(Da12CG)
	r131: m__12C(_12CU~0,c~C,c2~0,da~DA,di~0,l,lu~0,r~0) -> m__11C(_11CU~0,c~C,c2~0,da~DA,di~0,l,lu~0,r~0) kptp68 #Modifiers(Da12CC)
	r132: m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) kptp68 #Modifiers(Da12LG)
	r133: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~0,di~DI,l!162,r~0) -> L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~0,di~DI,l!163,r~0) kptp #Modifiers(DiL10UU)
	r134: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2,l!164,r~0) -> L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~0,di~DI,l!163,r~0) kptp68 #Modifiers(DiL01UU)
	r135: m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2,l!164,r~0) kptp #Modifiers(DiL11UU)
	r136: m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~0,di~DI,l!162,r~0) kptp68 #Modifiers(DiL11UU)
	r137: m__11UU(c~0,cbl!155,da~0,di~DI,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~DI,l!162,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) kptp68 #Modifiers(DiL11CU)
	r138: m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~DI,l!162,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) kptp68 #Modifiers(DiL11LU)
	r139: m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2!158,l!164,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kptp #Modifiers(DiL11UG)
	r140: DiL11UL() -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2!158,l!164,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kptp #Modifiers(DiL11UL)
	r141: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2,l!166,r~0) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2,l!164,r~0) fRate140() #Modifiers(DiL02UU)
	r142: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2!159,l!166,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2!158,l!164,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kptp68 #Modifiers(DiL02UG)
	r143: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2!159,l!166,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2!158,l!164,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kptp68 #Modifiers(DiL02UL)
	r144: m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2,l!166,r~0) kptp #Modifiers(DiL12UU)
	r145: m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) fRate144() #Modifiers(DiL12UU)
	r146: m__12UU(c~0,cbl!160,da~0,di~DI,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) fRate145() #Modifiers(DiL12CU)
	r147: m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) fRate146() #Modifiers(DiL12LU)
	r148: m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2!159,l!166,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) kptp #Modifiers(DiL12UG)
	r149: m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kptp68 #Modifiers(DiL12UG)
	r150: DiL12UL() -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2!159,l!166,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) kptp #Modifiers(DiL12UL)
	r151: DiL12UL() -> DiL11UL() kptp68 #Modifiers(DiL12UL)
	r152: DiL12CG() -> DiL11CG() kptp68 #Modifiers(DiL12CG)
	r153: m__12C(_12CU~0,c~C,c2~0,da~0,di~DI,l!168,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) -> m__11C(_11CU~0,c~C,c2~0,da~0,di~DI,l!169,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) kptp68 #Modifiers(DiL12CC)
	r154: m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2!170,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2!171,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) kptp68 #Modifiers(DiL12LG)
	r155: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~DA,di~0,l!162,r~0) -> L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~DA,di~0,l!163,r~0) kptp #Modifiers(DaL10UU)
	r156: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2,l!164,r~0) -> L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~DA,di~0,l!163,r~0) kptp68 #Modifiers(DaL01UU)
	r157: m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2,l!164,r~0) kptp #Modifiers(DaL11UU)
	r158: m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~DA,di~0,l!162,r~0) kptp68 #Modifiers(DaL11UU)
	r159: m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~DA,di~0,l!162,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) kptp68 #Modifiers(DaL11CU)
	r160: m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~DA,di~0,l!162,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) kptp68 #Modifiers(DaL11LU)
	r161: m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2!158,l!164,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kptp #Modifiers(DaL11UG)
	r162: DaL11UL() -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2!158,l!164,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kptp #Modifiers(DaL11UL)
	r163: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2,l!166,r~0) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2,l!164,r~0) fRate162() #Modifiers(DaL02UU)
	r164: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2!159,l!166,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2!158,l!164,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kptp68 #Modifiers(DaL02UG)
	r165: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2!159,l!166,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2!158,l!164,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kptp68 #Modifiers(DaL02UL)
	r166: m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2,l!166,r~0) kptp #Modifiers(DaL12UU)
	r167: m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) fRate166() #Modifiers(DaL12UU)
	r168: m__12UU(c~0,cbl!160,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) fRate167() #Modifiers(DaL12CU)
	r169: m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) fRate168() #Modifiers(DaL12LU)
	r170: m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2!159,l!166,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) kptp #Modifiers(DaL12UG)
	r171: m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kptp68 #Modifiers(DaL12UG)
	r172: DaL12UL() -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2!159,l!166,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) kptp #Modifiers(DaL12UL)
	r173: DaL12UL() -> DaL11UL() kptp68 #Modifiers(DaL12UL)
	r174: DaL12CG() -> DaL11CG() kptp68 #Modifiers(DaL12CG)
	r175: m__12C(_12CU~0,c~C,c2~0,da~DA,di~0,l!168,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) -> m__11C(_11CU~0,c~C,c2~0,da~DA,di~0,l!169,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) kptp68 #Modifiers(DaL12CC)
	r176: m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2!170,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2!171,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) kptp68 #Modifiers(DaL12LG)
	r177: m__00UU(c~0,da~DA,di~0,l,r~0) -> m__10UU(c~0,cbl,da~DA,di~0,l,r~0) kkin #Modifiers(Da00UU)
	r178: m__00UU(c~0,da~DA,di~0,l,r~0) -> m__01UU(c~0,da~DA,di~0,grb2,l,r~0) fRate177() #Modifiers(Da00UU)
	r179: m__10UU(c~0,cbl,da~DA,di~0,l,r~0) -> m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) fRate178() #Modifiers(Da10UU)
	r180: m__10UU(c~0,cbl!156,da~DA,di~0,l,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l,r~0).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) fRate179() #Modifiers(Da10CU)
	r181: m__10UU(c~0,cbl!156,da~DA,di~0,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) fRate180() #Modifiers(Da10LU)
	r182: m__01UU(c~0,da~DA,di~0,grb2,l,r~0) -> m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) kkin #Modifiers(Da01UU)
	r183: m__01UU(c~0,da~DA,di~0,grb2,l,r~0) -> m__02UU(c~0,da~DA,di~0,grb2,l,r~0) kkin68 #Modifiers(Da01UU)
	r184: m__01UU(c~0,da~DA,di~0,grb2!158,l,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kkin #Modifiers(Da01UG)
	r185: m__01UU(c~0,da~DA,di~0,grb2!158,l,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> m__02UU(c~0,da~DA,di~0,grb2!159,l,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) kkin68 #Modifiers(Da01UG)
	r186: m__01UU(c~0,da~DA,di~0,grb2!158,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> Da11UL() kkin #Modifiers(Da01UL)
	r187: m__01UU(c~0,da~DA,di~0,grb2!158,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> m__02UU(c~0,da~DA,di~0,grb2!159,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) kkin68 #Modifiers(Da01UL)
	r188: m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) -> m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) kkin68 #Modifiers(Da11UU)
	r189: m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l,r~0).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2,grb2,l,r~0).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) kkin68 #Modifiers(Da11CU)
	r190: m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) kkin68 #Modifiers(Da11LU)
	r191: m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) kkin68 #Modifiers(Da11UG)
	r192: Da11UL() -> Da12UL() kkin68 #Modifiers(Da11UL)
	r193: Da11CG() -> Da12CG() kkin68 #Modifiers(Da11CG)
	r194: m__11C(_11CU~0,c~C,c2~0,da~DA,di~0,l,lu~0,r~0) -> m__12C(_12CU~0,c~C,c2~0,da~DA,di~0,l,lu~0,r~0) kkin68 #Modifiers(Da11CC)
	r195: m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) kkin68 #Modifiers(Da11LG)
	r196: m__02UU(c~0,da~DA,di~0,grb2,l,r~0) -> m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) kkin #Modifiers(Da02UU)
	r197: m__02UU(c~0,da~DA,di~0,grb2!159,l,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) kkin #Modifiers(Da02UG)
	r198: m__02UU(c~0,da~DA,di~0,grb2!159,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> Da12UL() kkin #Modifiers(Da02UL)
	r199: L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~DA,di~0,l!163,r~0) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~DA,di~0,l!162,r~0) kkin #Modifiers(DaL00UU)
	r200: L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~DA,di~0,l!163,r~0) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2,l!164,r~0) fRate199() #Modifiers(DaL00UU)
	r201: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~DA,di~0,l!162,r~0) -> m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) fRate200() #Modifiers(DaL10UU)
	r202: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~DA,di~0,l!162,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) fRate201() #Modifiers(DaL10CU)
	r203: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~DA,di~0,l!162,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) fRate202() #Modifiers(DaL10LU)
	r204: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2,l!164,r~0) -> m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) kkin #Modifiers(DaL01UU)
	r205: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2,l!164,r~0) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2,l!166,r~0) kkin68 #Modifiers(DaL01UU)
	r206: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2!158,l!164,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kkin #Modifiers(DaL01UG)
	r207: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2!158,l!164,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2!159,l!166,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) kkin68 #Modifiers(DaL01UG)
	r208: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2!158,l!164,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> DaL11UL() kkin #Modifiers(DaL01UL)
	r209: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2!158,l!164,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2!159,l!166,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) kkin68 #Modifiers(DaL01UL)
	r210: m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) kkin68 #Modifiers(DaL11UU)
	r211: m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) kkin68 #Modifiers(DaL11CU)
	r212: m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) kkin68 #Modifiers(DaL11LU)
	r213: m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) kkin68 #Modifiers(DaL11UG)
	r214: DaL11UL() -> DaL12UL() kkin68 #Modifiers(DaL11UL)
	r215: DaL11CG() -> DaL12CG() kkin68 #Modifiers(DaL11CG)
	r216: m__11C(_11CU~0,c~C,c2~0,da~DA,di~0,l!169,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) -> m__12C(_12CU~0,c~C,c2~0,da~DA,di~0,l!168,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) kkin68 #Modifiers(DaL11CC)
	r217: m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2!171,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2!170,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) kkin68 #Modifiers(DaL11LG)
	r218: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2,l!166,r~0) -> m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) kkin #Modifiers(DaL02UU)
	r219: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2!159,l!166,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) kkin #Modifiers(DaL02UG)
	r220: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2!159,l!166,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> DaL12UL() kkin #Modifiers(DaL02UL)
	r221: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + Grb2(_01uu,_02uu,_11uu,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) kbcg #Modifiers(Cbl, Grb2)
	r222: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + Grb2(_01uu,_02uu,_11uu,_12uu,cbl) kucg #Modifiers(CG)
	r223: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__10UU(c~C,cbl,da~0,di~0,l,r~R) -> m__10UU(c~C,cbl!156,da~0,di~0,l,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) kb45 #Modifiers(Cbl, Rc10UU)
	r224: m__10UU(c~C,cbl!156,da~0,di~0,l,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__10UU(c~C,cbl,da~0,di~0,l,r~R) ku45 #Modifiers(Rc10CU)
	r225: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__10UU(c~C,cbl,da~0,di~0,l,r~R) -> m__10UU(c~C,cbl!156,da~0,di~0,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) kb45 #Modifiers(CG, Rc10UU)
	r226: m__10UU(c~C,cbl!156,da~0,di~0,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__10UU(c~C,cbl,da~0,di~0,l,r~R) ku45 #Modifiers(Rc10LU)
	r227: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__10UU(c~C,cbl!156,da~0,di~0,l,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> m__10UU(c~C,cbl!156,da~0,di~0,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) kbcg #Modifiers(Grb2, Rc10CU)
	r228: m__10UU(c~C,cbl!156,da~0,di~0,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__10UU(c~C,cbl!156,da~0,di~0,l,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) kucg #Modifiers(Rc10LU)
	r229: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__01UU(c~C,da~0,di~0,grb2,l,r~R) -> m__01UU(c~C,da~0,di~0,grb2!158,l,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kb68 #Modifiers(Grb2, Rc01UU)
	r230: m__01UU(c~C,da~0,di~0,grb2!158,l,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__01UU(c~C,da~0,di~0,grb2,l,r~R) ku68 #Modifiers(Rc01UG)
	r231: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__01UU(c~C,da~0,di~0,grb2,l,r~R) -> m__01UU(c~C,da~0,di~0,grb2!158,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kb68 #Modifiers(CG, Rc01UU)
	r232: m__01UU(c~C,da~0,di~0,grb2!158,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__01UU(c~C,da~0,di~0,grb2,l,r~R) ku68 #Modifiers(Rc01UL)
	r233: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__01UU(c~C,da~0,di~0,grb2!158,l,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> m__01UU(c~C,da~0,di~0,grb2!158,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kbcg #Modifiers(Cbl, Rc01UG)
	r234: m__01UU(c~C,da~0,di~0,grb2!158,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__01UU(c~C,da~0,di~0,grb2!158,l,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kucg #Modifiers(Rc01UL)
	r235: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~C,cbl,da~0,di~0,grb2,grb2,l,r~R) -> m__11UU(c~C,cbl!155,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) kb45 #Modifiers(Cbl, Rc11UU)
	r236: m__11UU(c~C,cbl!155,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~C,cbl,da~0,di~0,grb2,grb2,l,r~R) ku45 #Modifiers(Rc11CU)
	r237: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~C,cbl,da~0,di~0,grb2,grb2,l,r~R) -> m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) kb45 #Modifiers(CG, Rc11UU)
	r238: m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~C,cbl,da~0,di~0,grb2,grb2,l,r~R) ku45 #Modifiers(Rc11LU)
	r239: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~C,cbl,da~0,di~0,grb2,grb2,l,r~R) -> m__11UU(c~C,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kb68 #Modifiers(Grb2, Rc11UU)
	r240: m__11UU(c~C,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~C,cbl,da~0,di~0,grb2,grb2,l,r~R) ku68 #Modifiers(Rc11UG)
	r241: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~C,cbl,da~0,di~0,grb2,grb2,l,r~R) -> Rc11UL() kb68 #Modifiers(CG, Rc11UU)
	r242: Rc11UL() -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~C,cbl,da~0,di~0,grb2,grb2,l,r~R) ku68 #Modifiers(Rc11UL)
	r243: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~C,cbl!155,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) kbcg #Modifiers(Grb2, Rc11CU)
	r244: m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~C,cbl!155,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) kucg #Modifiers(Rc11LU)
	r245: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~C,cbl!155,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> Rc11CG() kb68 #Modifiers(Grb2, Rc11CU)
	r246: Rc11CG() -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~C,cbl!155,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) ku68 #Modifiers(Rc11CG)
	r247: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) kb68 #Modifiers(Grb2, Rc11LU)
	r248: m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) ku68 #Modifiers(Rc11LG)
	r249: m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11C(_11CU~0,c~C,c2~C,da~0,di~0,l,lu~0,r~R) kb68P #Modifiers(Rc11LU)
	r250: m__11C(_11CU~0,c~C,c2~C,da~0,di~0,l,lu~0,r~R) -> m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) ku68M #Modifiers(Rc11CC)
	r251: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~C,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> Rc11CG() kb45 #Modifiers(Cbl, Rc11UG)
	r252: Rc11CG() -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~C,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) ku45 #Modifiers(Rc11CG)
	r253: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~C,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) kb45 #Modifiers(CG, Rc11UG)
	r254: m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~C,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) ku45 #Modifiers(Rc11LG)
	r255: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~C,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> Rc11UL() kbcg #Modifiers(Cbl, Rc11UG)
	r256: Rc11UL() -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~C,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kucg #Modifiers(Rc11UL)
	r257: Rc11UL() -> m__11C(_11CU~0,c~C,c2~C,da~0,di~0,l,lu~0,r~R) kb45P #Modifiers(Rc11UL)
	r258: m__11C(_11CU~0,c~C,c2~C,da~0,di~0,l,lu~0,r~R) -> Rc11UL() ku45M #Modifiers(Rc11CC)
	r259: Rc11CG() -> m__11C(_11CU~0,c~C,c2~C,da~0,di~0,l,lu~0,r~R) kbcgP #Modifiers(Rc11CG)
	r260: m__11C(_11CU~0,c~C,c2~C,da~0,di~0,l,lu~0,r~R) -> Rc11CG() kucgM #Modifiers(Rc11CC)
	r261: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + Rc11CG() -> m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) kbcg #Modifiers(Grb2, Rc11CG)
	r262: m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + Rc11CG() kucg #Modifiers(Rc11LG)
	r263: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__02UU(c~C,da~0,di~0,grb2,l,r~R) -> m__02UU(c~C,da~0,di~0,grb2!159,l,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) fRate262() #Modifiers(Grb2, Rc02UU)
	r264: m__02UU(c~C,da~0,di~0,grb2!159,l,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__02UU(c~C,da~0,di~0,grb2,l,r~R) ku68 #Modifiers(Rc02UG)
	r265: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__02UU(c~C,da~0,di~0,grb2,l,r~R) -> m__02UU(c~C,da~0,di~0,grb2!159,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) fRate264() #Modifiers(CG, Rc02UU)
	r266: m__02UU(c~C,da~0,di~0,grb2!159,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__02UU(c~C,da~0,di~0,grb2,l,r~R) ku68 #Modifiers(Rc02UL)
	r267: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__02UU(c~C,da~0,di~0,grb2!159,l,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> m__02UU(c~C,da~0,di~0,grb2!159,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) kbcg #Modifiers(Cbl, Rc02UG)
	r268: m__02UU(c~C,da~0,di~0,grb2!159,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__02UU(c~C,da~0,di~0,grb2!159,l,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) kucg #Modifiers(Rc02UL)
	r269: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~C,cbl,da~0,di~0,grb2,grb2,l,r~R) -> m__12UU(c~C,cbl!160,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) kb45 #Modifiers(Cbl, Rc12UU)
	r270: m__12UU(c~C,cbl!160,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~C,cbl,da~0,di~0,grb2,grb2,l,r~R) ku45 #Modifiers(Rc12CU)
	r271: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~C,cbl,da~0,di~0,grb2,grb2,l,r~R) -> m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) kb45 #Modifiers(CG, Rc12UU)
	r272: m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~C,cbl,da~0,di~0,grb2,grb2,l,r~R) ku45 #Modifiers(Rc12LU)
	r273: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~C,cbl,da~0,di~0,grb2,grb2,l,r~R) -> m__12UU(c~C,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) fRate272() #Modifiers(Grb2, Rc12UU)
	r274: m__12UU(c~C,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~C,cbl,da~0,di~0,grb2,grb2,l,r~R) ku68 #Modifiers(Rc12UG)
	r275: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~C,cbl,da~0,di~0,grb2,grb2,l,r~R) -> Rc12UL() fRate274() #Modifiers(CG, Rc12UU)
	r276: Rc12UL() -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~C,cbl,da~0,di~0,grb2,grb2,l,r~R) ku68 #Modifiers(Rc12UL)
	r277: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~C,cbl!160,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) kbcg #Modifiers(Grb2, Rc12CU)
	r278: m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~C,cbl!160,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) kucg #Modifiers(Rc12LU)
	r279: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~C,cbl!160,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> Rc12CG() fRate278() #Modifiers(Grb2, Rc12CU)
	r280: Rc12CG() -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~C,cbl!160,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) ku68 #Modifiers(Rc12CG)
	r281: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) fRate280() #Modifiers(Grb2, Rc12LU)
	r282: m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) ku68 #Modifiers(Rc12LG)
	r283: m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12C(_12CU~0,c~C,c2~C,da~0,di~0,l,lu~0,r~R) fRate282() #Modifiers(Rc12LU)
	r284: m__12C(_12CU~0,c~C,c2~C,da~0,di~0,l,lu~0,r~R) -> m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) ku68M #Modifiers(Rc12CC)
	r285: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~C,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> Rc12CG() kb45 #Modifiers(Cbl, Rc12UG)
	r286: Rc12CG() -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~C,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) ku45 #Modifiers(Rc12CG)
	r287: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~C,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) kb45 #Modifiers(CG, Rc12UG)
	r288: m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~C,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) ku45 #Modifiers(Rc12LG)
	r289: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~C,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> Rc12UL() kbcg #Modifiers(Cbl, Rc12UG)
	r290: Rc12UL() -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~C,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) kucg #Modifiers(Rc12UL)
	r291: Rc12UL() -> m__12C(_12CU~0,c~C,c2~C,da~0,di~0,l,lu~0,r~R) kb45P #Modifiers(Rc12UL)
	r292: m__12C(_12CU~0,c~C,c2~C,da~0,di~0,l,lu~0,r~R) -> Rc12UL() ku45M #Modifiers(Rc12CC)
	r293: Rc12CG() -> m__12C(_12CU~0,c~C,c2~C,da~0,di~0,l,lu~0,r~R) kbcgP #Modifiers(Rc12CG)
	r294: m__12C(_12CU~0,c~C,c2~C,da~0,di~0,l,lu~0,r~R) -> Rc12CG() kucgM #Modifiers(Rc12CC)
	r295: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + Rc12CG() -> m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) kbcg #Modifiers(Grb2, Rc12CG)
	r296: m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + Rc12CG() kucg #Modifiers(Rc12LG)
	r297: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~C,cbl,da~0,di~0,l!162,r~R) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~C,cbl!156,da~0,di~0,l!162,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) kb45 #Modifiers(Cbl, RcL10UU)
	r298: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~C,cbl!156,da~0,di~0,l!162,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~C,cbl,da~0,di~0,l!162,r~R) ku45 #Modifiers(RcL10CU)
	r299: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~C,cbl,da~0,di~0,l!162,r~R) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~C,cbl!156,da~0,di~0,l!162,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) kb45 #Modifiers(CG, RcL10UU)
	r300: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~C,cbl!156,da~0,di~0,l!162,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~C,cbl,da~0,di~0,l!162,r~R) ku45 #Modifiers(RcL10LU)
	r301: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~C,cbl!156,da~0,di~0,l!162,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~C,cbl!156,da~0,di~0,l!162,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) kbcg #Modifiers(Grb2, RcL10CU)
	r302: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~C,cbl!156,da~0,di~0,l!162,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~C,cbl!156,da~0,di~0,l!162,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) kucg #Modifiers(RcL10LU)
	r303: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2,l!164,r~R) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2!158,l!164,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kb68 #Modifiers(Grb2, RcL01UU)
	r304: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2!158,l!164,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2,l!164,r~R) ku68 #Modifiers(RcL01UG)
	r305: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2,l!164,r~R) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2!158,l!164,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kb68 #Modifiers(CG, RcL01UU)
	r306: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2!158,l!164,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2,l!164,r~R) ku68 #Modifiers(RcL01UL)
	r307: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2!158,l!164,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2!158,l!164,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kbcg #Modifiers(Cbl, RcL01UG)
	r308: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2!158,l!164,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2!158,l!164,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kucg #Modifiers(RcL01UL)
	r309: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~C,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> m__11UU(c~C,cbl!155,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) kb45 #Modifiers(Cbl, RcL11UU)
	r310: m__11UU(c~C,cbl!155,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~C,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) ku45 #Modifiers(RcL11CU)
	r311: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~C,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) kb45 #Modifiers(CG, RcL11UU)
	r312: m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~C,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) ku45 #Modifiers(RcL11LU)
	r313: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~C,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> m__11UU(c~C,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kb68 #Modifiers(Grb2, RcL11UU)
	r314: m__11UU(c~C,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~C,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) ku68 #Modifiers(RcL11UG)
	r315: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~C,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> RcL11UL() kb68 #Modifiers(CG, RcL11UU)
	r316: RcL11UL() -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~C,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) ku68 #Modifiers(RcL11UL)
	r317: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~C,cbl!155,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) kbcg #Modifiers(Grb2, RcL11CU)
	r318: m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~C,cbl!155,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) kucg #Modifiers(RcL11LU)
	r319: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~C,cbl!155,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> RcL11CG() kb68 #Modifiers(Grb2, RcL11CU)
	r320: RcL11CG() -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~C,cbl!155,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) ku68 #Modifiers(RcL11CG)
	r321: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2!171,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) kb68 #Modifiers(Grb2, RcL11LU)
	r322: m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2!171,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) ku68 #Modifiers(RcL11LG)
	r323: m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11C(_11CU~0,c~C,c2~C,da~0,di~0,l!169,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) kb68P #Modifiers(RcL11LU)
	r324: m__11C(_11CU~0,c~C,c2~C,da~0,di~0,l!169,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) -> m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) ku68M #Modifiers(RcL11CC)
	r325: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~C,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> RcL11CG() kb45 #Modifiers(Cbl, RcL11UG)
	r326: RcL11CG() -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~C,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) ku45 #Modifiers(RcL11CG)
	r327: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~C,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2!171,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) kb45 #Modifiers(CG, RcL11UG)
	r328: m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2!171,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~C,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) ku45 #Modifiers(RcL11LG)
	r329: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~C,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> RcL11UL() kbcg #Modifiers(Cbl, RcL11UG)
	r330: RcL11UL() -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~C,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kucg #Modifiers(RcL11UL)
	r331: RcL11UL() -> m__11C(_11CU~0,c~C,c2~C,da~0,di~0,l!169,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) kb45P #Modifiers(RcL11UL)
	r332: m__11C(_11CU~0,c~C,c2~C,da~0,di~0,l!169,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) -> RcL11UL() ku45M #Modifiers(RcL11CC)
	r333: RcL11CG() -> m__11C(_11CU~0,c~C,c2~C,da~0,di~0,l!169,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) kbcgP #Modifiers(RcL11CG)
	r334: m__11C(_11CU~0,c~C,c2~C,da~0,di~0,l!169,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) -> RcL11CG() kucgM #Modifiers(RcL11CC)
	r335: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + RcL11CG() -> m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2!171,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) kbcg #Modifiers(Grb2, RcL11CG)
	r336: m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2!171,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + RcL11CG() kucg #Modifiers(RcL11LG)
	r337: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2,l!166,r~R) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2!159,l!166,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) fRate336() #Modifiers(Grb2, RcL02UU)
	r338: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2!159,l!166,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2,l!166,r~R) ku68 #Modifiers(RcL02UG)
	r339: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2,l!166,r~R) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2!159,l!166,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) fRate338() #Modifiers(CG, RcL02UU)
	r340: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2!159,l!166,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2,l!166,r~R) ku68 #Modifiers(RcL02UL)
	r341: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2!159,l!166,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2!159,l!166,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) kbcg #Modifiers(Cbl, RcL02UG)
	r342: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2!159,l!166,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2!159,l!166,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) kucg #Modifiers(RcL02UL)
	r343: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~C,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> m__12UU(c~C,cbl!160,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) kb45 #Modifiers(Cbl, RcL12UU)
	r344: m__12UU(c~C,cbl!160,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~C,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) ku45 #Modifiers(RcL12CU)
	r345: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~C,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) kb45 #Modifiers(CG, RcL12UU)
	r346: m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~C,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) ku45 #Modifiers(RcL12LU)
	r347: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~C,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> m__12UU(c~C,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) fRate346() #Modifiers(Grb2, RcL12UU)
	r348: m__12UU(c~C,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~C,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) ku68 #Modifiers(RcL12UG)
	r349: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~C,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> RcL12UL() fRate348() #Modifiers(CG, RcL12UU)
	r350: RcL12UL() -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~C,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) ku68 #Modifiers(RcL12UL)
	r351: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~C,cbl!160,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) kbcg #Modifiers(Grb2, RcL12CU)
	r352: m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~C,cbl!160,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) kucg #Modifiers(RcL12LU)
	r353: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~C,cbl!160,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> RcL12CG() fRate352() #Modifiers(Grb2, RcL12CU)
	r354: RcL12CG() -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~C,cbl!160,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) ku68 #Modifiers(RcL12CG)
	r355: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2!170,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) fRate354() #Modifiers(Grb2, RcL12LU)
	r356: m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2!170,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) ku68 #Modifiers(RcL12LG)
	r357: m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12C(_12CU~0,c~C,c2~C,da~0,di~0,l!168,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) fRate356() #Modifiers(RcL12LU)
	r358: m__12C(_12CU~0,c~C,c2~C,da~0,di~0,l!168,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) -> m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) ku68M #Modifiers(RcL12CC)
	r359: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~C,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> RcL12CG() kb45 #Modifiers(Cbl, RcL12UG)
	r360: RcL12CG() -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~C,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) ku45 #Modifiers(RcL12CG)
	r361: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~C,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2!170,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) kb45 #Modifiers(CG, RcL12UG)
	r362: m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2!170,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~C,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) ku45 #Modifiers(RcL12LG)
	r363: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~C,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> RcL12UL() kbcg #Modifiers(Cbl, RcL12UG)
	r364: RcL12UL() -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~C,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) kucg #Modifiers(RcL12UL)
	r365: RcL12UL() -> m__12C(_12CU~0,c~C,c2~C,da~0,di~0,l!168,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) kb45P #Modifiers(RcL12UL)
	r366: m__12C(_12CU~0,c~C,c2~C,da~0,di~0,l!168,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) -> RcL12UL() ku45M #Modifiers(RcL12CC)
	r367: RcL12CG() -> m__12C(_12CU~0,c~C,c2~C,da~0,di~0,l!168,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) kbcgP #Modifiers(RcL12CG)
	r368: m__12C(_12CU~0,c~C,c2~C,da~0,di~0,l!168,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) -> RcL12CG() kucgM #Modifiers(RcL12CC)
	r369: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + RcL12CG() -> m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2!170,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) kbcg #Modifiers(Grb2, RcL12CG)
	r370: m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2!170,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + RcL12CG() kucg #Modifiers(RcL12LG)
	r371: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__10UU(c~0,cbl,da~0,di~0,l,r~R) -> m__10UU(c~0,cbl!156,da~0,di~0,l,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) kb45 #Modifiers(Cbl, R10UU)
	r372: m__10UU(c~0,cbl!156,da~0,di~0,l,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__10UU(c~0,cbl,da~0,di~0,l,r~R) ku45 #Modifiers(R10CU)
	r373: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__10UU(c~0,cbl,da~0,di~0,l,r~R) -> m__10UU(c~0,cbl!156,da~0,di~0,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) kb45 #Modifiers(CG, R10UU)
	r374: m__10UU(c~0,cbl!156,da~0,di~0,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__10UU(c~0,cbl,da~0,di~0,l,r~R) ku45 #Modifiers(R10LU)
	r375: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__10UU(c~0,cbl!156,da~0,di~0,l,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> m__10UU(c~0,cbl!156,da~0,di~0,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) kbcg #Modifiers(Grb2, R10CU)
	r376: m__10UU(c~0,cbl!156,da~0,di~0,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__10UU(c~0,cbl!156,da~0,di~0,l,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) kucg #Modifiers(R10LU)
	r377: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__01UU(c~0,da~0,di~0,grb2,l,r~R) -> m__01UU(c~0,da~0,di~0,grb2!158,l,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kb68 #Modifiers(Grb2, R01UU)
	r378: m__01UU(c~0,da~0,di~0,grb2!158,l,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__01UU(c~0,da~0,di~0,grb2,l,r~R) ku68 #Modifiers(R01UG)
	r379: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__01UU(c~0,da~0,di~0,grb2,l,r~R) -> m__01UU(c~0,da~0,di~0,grb2!158,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kb68 #Modifiers(CG, R01UU)
	r380: m__01UU(c~0,da~0,di~0,grb2!158,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__01UU(c~0,da~0,di~0,grb2,l,r~R) ku68 #Modifiers(R01UL)
	r381: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__01UU(c~0,da~0,di~0,grb2!158,l,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> m__01UU(c~0,da~0,di~0,grb2!158,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kbcg #Modifiers(Cbl, R01UG)
	r382: m__01UU(c~0,da~0,di~0,grb2!158,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__01UU(c~0,da~0,di~0,grb2!158,l,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kucg #Modifiers(R01UL)
	r383: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) kb45 #Modifiers(Cbl, R11UU)
	r384: m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) ku45 #Modifiers(R11CU)
	r385: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) kb45 #Modifiers(CG, R11UU)
	r386: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) ku45 #Modifiers(R11LU)
	r387: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) -> m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kb68 #Modifiers(Grb2, R11UU)
	r388: m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) ku68 #Modifiers(R11UG)
	r389: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) -> R11UL() kb68 #Modifiers(CG, R11UU)
	r390: R11UL() -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) ku68 #Modifiers(R11UL)
	r391: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) kbcg #Modifiers(Grb2, R11CU)
	r392: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) kucg #Modifiers(R11LU)
	r393: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> R11CG() kb68 #Modifiers(Grb2, R11CU)
	r394: R11CG() -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) ku68 #Modifiers(R11CG)
	r395: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) kb68 #Modifiers(Grb2, R11LU)
	r396: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) ku68 #Modifiers(R11LG)
	r397: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11C(_11CU~0,c~C,c2~0,da~0,di~0,l,lu~0,r~R) kb68P #Modifiers(R11LU)
	r398: m__11C(_11CU~0,c~C,c2~0,da~0,di~0,l,lu~0,r~R) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) ku68M #Modifiers(R11CC)
	r399: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> R11CG() kb45 #Modifiers(Cbl, R11UG)
	r400: R11CG() -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) ku45 #Modifiers(R11CG)
	r401: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) kb45 #Modifiers(CG, R11UG)
	r402: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) ku45 #Modifiers(R11LG)
	r403: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> R11UL() kbcg #Modifiers(Cbl, R11UG)
	r404: R11UL() -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kucg #Modifiers(R11UL)
	r405: R11UL() -> m__11C(_11CU~0,c~C,c2~0,da~0,di~0,l,lu~0,r~R) kb45P #Modifiers(R11UL)
	r406: m__11C(_11CU~0,c~C,c2~0,da~0,di~0,l,lu~0,r~R) -> R11UL() ku45M #Modifiers(R11CC)
	r407: R11CG() -> m__11C(_11CU~0,c~C,c2~0,da~0,di~0,l,lu~0,r~R) kbcgP #Modifiers(R11CG)
	r408: m__11C(_11CU~0,c~C,c2~0,da~0,di~0,l,lu~0,r~R) -> R11CG() kucgM #Modifiers(R11CC)
	r409: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + R11CG() -> m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) kbcg #Modifiers(Grb2, R11CG)
	r410: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + R11CG() kucg #Modifiers(R11LG)
	r411: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__02UU(c~0,da~0,di~0,grb2,l,r~R) -> m__02UU(c~0,da~0,di~0,grb2!159,l,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) fRate410() #Modifiers(Grb2, R02UU)
	r412: m__02UU(c~0,da~0,di~0,grb2!159,l,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__02UU(c~0,da~0,di~0,grb2,l,r~R) ku68 #Modifiers(R02UG)
	r413: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__02UU(c~0,da~0,di~0,grb2,l,r~R) -> m__02UU(c~0,da~0,di~0,grb2!159,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) fRate412() #Modifiers(CG, R02UU)
	r414: m__02UU(c~0,da~0,di~0,grb2!159,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__02UU(c~0,da~0,di~0,grb2,l,r~R) ku68 #Modifiers(R02UL)
	r415: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__02UU(c~0,da~0,di~0,grb2!159,l,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> m__02UU(c~0,da~0,di~0,grb2!159,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) kbcg #Modifiers(Cbl, R02UG)
	r416: m__02UU(c~0,da~0,di~0,grb2!159,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__02UU(c~0,da~0,di~0,grb2!159,l,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) kucg #Modifiers(R02UL)
	r417: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) kb45 #Modifiers(Cbl, R12UU)
	r418: m__12UU(c~0,cbl!160,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) ku45 #Modifiers(R12CU)
	r419: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) kb45 #Modifiers(CG, R12UU)
	r420: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) ku45 #Modifiers(R12LU)
	r421: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) -> m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) fRate420() #Modifiers(Grb2, R12UU)
	r422: m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) ku68 #Modifiers(R12UG)
	r423: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) -> R12UL() fRate422() #Modifiers(CG, R12UU)
	r424: R12UL() -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) ku68 #Modifiers(R12UL)
	r425: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) kbcg #Modifiers(Grb2, R12CU)
	r426: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) kucg #Modifiers(R12LU)
	r427: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> R12CG() fRate426() #Modifiers(Grb2, R12CU)
	r428: R12CG() -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) ku68 #Modifiers(R12CG)
	r429: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) fRate428() #Modifiers(Grb2, R12LU)
	r430: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) ku68 #Modifiers(R12LG)
	r431: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12C(_12CU~0,c~C,c2~0,da~0,di~0,l,lu~0,r~R) fRate430() #Modifiers(R12LU)
	r432: m__12C(_12CU~0,c~C,c2~0,da~0,di~0,l,lu~0,r~R) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) ku68M #Modifiers(R12CC)
	r433: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> R12CG() kb45 #Modifiers(Cbl, R12UG)
	r434: R12CG() -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) ku45 #Modifiers(R12CG)
	r435: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) kb45 #Modifiers(CG, R12UG)
	r436: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) ku45 #Modifiers(R12LG)
	r437: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> R12UL() kbcg #Modifiers(Cbl, R12UG)
	r438: R12UL() -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) kucg #Modifiers(R12UL)
	r439: R12UL() -> m__12C(_12CU~0,c~C,c2~0,da~0,di~0,l,lu~0,r~R) kb45P #Modifiers(R12UL)
	r440: m__12C(_12CU~0,c~C,c2~0,da~0,di~0,l,lu~0,r~R) -> R12UL() ku45M #Modifiers(R12CC)
	r441: R12CG() -> m__12C(_12CU~0,c~C,c2~0,da~0,di~0,l,lu~0,r~R) kbcgP #Modifiers(R12CG)
	r442: m__12C(_12CU~0,c~C,c2~0,da~0,di~0,l,lu~0,r~R) -> R12CG() kucgM #Modifiers(R12CC)
	r443: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + R12CG() -> m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) kbcg #Modifiers(Grb2, R12CG)
	r444: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + R12CG() kucg #Modifiers(R12LG)
	r445: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~0,di~0,l!162,r~R) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~0,l!162,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) kb45 #Modifiers(Cbl, RL10UU)
	r446: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~0,l!162,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~0,di~0,l!162,r~R) ku45 #Modifiers(RL10CU)
	r447: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~0,di~0,l!162,r~R) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~0,l!162,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) kb45 #Modifiers(CG, RL10UU)
	r448: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~0,l!162,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~0,di~0,l!162,r~R) ku45 #Modifiers(RL10LU)
	r449: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~0,l!162,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~0,l!162,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) kbcg #Modifiers(Grb2, RL10CU)
	r450: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~0,l!162,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~0,l!162,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) kucg #Modifiers(RL10LU)
	r451: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2,l!164,r~R) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2!158,l!164,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kb68 #Modifiers(Grb2, RL01UU)
	r452: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2!158,l!164,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2,l!164,r~R) ku68 #Modifiers(RL01UG)
	r453: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2,l!164,r~R) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2!158,l!164,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kb68 #Modifiers(CG, RL01UU)
	r454: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2!158,l!164,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2,l!164,r~R) ku68 #Modifiers(RL01UL)
	r455: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2!158,l!164,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2!158,l!164,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kbcg #Modifiers(Cbl, RL01UG)
	r456: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2!158,l!164,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2!158,l!164,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kucg #Modifiers(RL01UL)
	r457: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) kb45 #Modifiers(Cbl, RL11UU)
	r458: m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) ku45 #Modifiers(RL11CU)
	r459: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) kb45 #Modifiers(CG, RL11UU)
	r460: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) ku45 #Modifiers(RL11LU)
	r461: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kb68 #Modifiers(Grb2, RL11UU)
	r462: m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) ku68 #Modifiers(RL11UG)
	r463: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> RL11UL() kb68 #Modifiers(CG, RL11UU)
	r464: RL11UL() -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) ku68 #Modifiers(RL11UL)
	r465: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) kbcg #Modifiers(Grb2, RL11CU)
	r466: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) kucg #Modifiers(RL11LU)
	r467: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> RL11CG() kb68 #Modifiers(Grb2, RL11CU)
	r468: RL11CG() -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) ku68 #Modifiers(RL11CG)
	r469: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2!171,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) kb68 #Modifiers(Grb2, RL11LU)
	r470: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2!171,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) ku68 #Modifiers(RL11LG)
	r471: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11C(_11CU~0,c~C,c2~0,da~0,di~0,l!169,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) kb68P #Modifiers(RL11LU)
	r472: m__11C(_11CU~0,c~C,c2~0,da~0,di~0,l!169,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) ku68M #Modifiers(RL11CC)
	r473: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> RL11CG() kb45 #Modifiers(Cbl, RL11UG)
	r474: RL11CG() -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) ku45 #Modifiers(RL11CG)
	r475: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2!171,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) kb45 #Modifiers(CG, RL11UG)
	r476: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2!171,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) ku45 #Modifiers(RL11LG)
	r477: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> RL11UL() kbcg #Modifiers(Cbl, RL11UG)
	r478: RL11UL() -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kucg #Modifiers(RL11UL)
	r479: RL11UL() -> m__11C(_11CU~0,c~C,c2~0,da~0,di~0,l!169,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) kb45P #Modifiers(RL11UL)
	r480: m__11C(_11CU~0,c~C,c2~0,da~0,di~0,l!169,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) -> RL11UL() ku45M #Modifiers(RL11CC)
	r481: RL11CG() -> m__11C(_11CU~0,c~C,c2~0,da~0,di~0,l!169,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) kbcgP #Modifiers(RL11CG)
	r482: m__11C(_11CU~0,c~C,c2~0,da~0,di~0,l!169,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) -> RL11CG() kucgM #Modifiers(RL11CC)
	r483: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + RL11CG() -> m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2!171,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) kbcg #Modifiers(Grb2, RL11CG)
	r484: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2!171,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + RL11CG() kucg #Modifiers(RL11LG)
	r485: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2,l!166,r~R) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2!159,l!166,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) fRate484() #Modifiers(Grb2, RL02UU)
	r486: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2!159,l!166,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2,l!166,r~R) ku68 #Modifiers(RL02UG)
	r487: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2,l!166,r~R) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2!159,l!166,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) fRate486() #Modifiers(CG, RL02UU)
	r488: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2!159,l!166,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2,l!166,r~R) ku68 #Modifiers(RL02UL)
	r489: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2!159,l!166,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2!159,l!166,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) kbcg #Modifiers(Cbl, RL02UG)
	r490: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2!159,l!166,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2!159,l!166,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) kucg #Modifiers(RL02UL)
	r491: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) kb45 #Modifiers(Cbl, RL12UU)
	r492: m__12UU(c~0,cbl!160,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) ku45 #Modifiers(RL12CU)
	r493: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) kb45 #Modifiers(CG, RL12UU)
	r494: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) ku45 #Modifiers(RL12LU)
	r495: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) fRate494() #Modifiers(Grb2, RL12UU)
	r496: m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) ku68 #Modifiers(RL12UG)
	r497: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> RL12UL() fRate496() #Modifiers(CG, RL12UU)
	r498: RL12UL() -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) ku68 #Modifiers(RL12UL)
	r499: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) kbcg #Modifiers(Grb2, RL12CU)
	r500: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) kucg #Modifiers(RL12LU)
	r501: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> RL12CG() fRate500() #Modifiers(Grb2, RL12CU)
	r502: RL12CG() -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) ku68 #Modifiers(RL12CG)
	r503: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2!170,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) fRate502() #Modifiers(Grb2, RL12LU)
	r504: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2!170,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) ku68 #Modifiers(RL12LG)
	r505: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12C(_12CU~0,c~C,c2~0,da~0,di~0,l!168,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) fRate504() #Modifiers(RL12LU)
	r506: m__12C(_12CU~0,c~C,c2~0,da~0,di~0,l!168,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) ku68M #Modifiers(RL12CC)
	r507: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> RL12CG() kb45 #Modifiers(Cbl, RL12UG)
	r508: RL12CG() -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) ku45 #Modifiers(RL12CG)
	r509: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2!170,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) kb45 #Modifiers(CG, RL12UG)
	r510: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2!170,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) ku45 #Modifiers(RL12LG)
	r511: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> RL12UL() kbcg #Modifiers(Cbl, RL12UG)
	r512: RL12UL() -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) kucg #Modifiers(RL12UL)
	r513: RL12UL() -> m__12C(_12CU~0,c~C,c2~0,da~0,di~0,l!168,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) kb45P #Modifiers(RL12UL)
	r514: m__12C(_12CU~0,c~C,c2~0,da~0,di~0,l!168,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) -> RL12UL() ku45M #Modifiers(RL12CC)
	r515: RL12CG() -> m__12C(_12CU~0,c~C,c2~0,da~0,di~0,l!168,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) kbcgP #Modifiers(RL12CG)
	r516: m__12C(_12CU~0,c~C,c2~0,da~0,di~0,l!168,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) -> RL12CG() kucgM #Modifiers(RL12CC)
	r517: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + RL12CG() -> m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2!170,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) kbcg #Modifiers(Grb2, RL12CG)
	r518: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2!170,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + RL12CG() kucg #Modifiers(RL12LG)
	r519: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__10UU(c~0,cbl,da~0,di~DI,l,r~0) -> m__10UU(c~0,cbl!156,da~0,di~DI,l,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) kb45 #Modifiers(Cbl, Di10UU)
	r520: m__10UU(c~0,cbl!156,da~0,di~DI,l,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__10UU(c~0,cbl,da~0,di~DI,l,r~0) ku45 #Modifiers(Di10CU)
	r521: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__10UU(c~0,cbl,da~0,di~DI,l,r~0) -> m__10UU(c~0,cbl!156,da~0,di~DI,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) kb45 #Modifiers(CG, Di10UU)
	r522: m__10UU(c~0,cbl!156,da~0,di~DI,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__10UU(c~0,cbl,da~0,di~DI,l,r~0) ku45 #Modifiers(Di10LU)
	r523: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__10UU(c~0,cbl!156,da~0,di~DI,l,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> m__10UU(c~0,cbl!156,da~0,di~DI,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) kbcg #Modifiers(Grb2, Di10CU)
	r524: m__10UU(c~0,cbl!156,da~0,di~DI,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__10UU(c~0,cbl!156,da~0,di~DI,l,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) kucg #Modifiers(Di10LU)
	r525: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__01UU(c~0,da~0,di~DI,grb2,l,r~0) -> m__01UU(c~0,da~0,di~DI,grb2!158,l,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kb68 #Modifiers(Grb2, Di01UU)
	r526: m__01UU(c~0,da~0,di~DI,grb2!158,l,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__01UU(c~0,da~0,di~DI,grb2,l,r~0) ku68 #Modifiers(Di01UG)
	r527: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__01UU(c~0,da~0,di~DI,grb2,l,r~0) -> m__01UU(c~0,da~0,di~DI,grb2!158,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kb68 #Modifiers(CG, Di01UU)
	r528: m__01UU(c~0,da~0,di~DI,grb2!158,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__01UU(c~0,da~0,di~DI,grb2,l,r~0) ku68 #Modifiers(Di01UL)
	r529: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__01UU(c~0,da~0,di~DI,grb2!158,l,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> m__01UU(c~0,da~0,di~DI,grb2!158,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kbcg #Modifiers(Cbl, Di01UG)
	r530: m__01UU(c~0,da~0,di~DI,grb2!158,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__01UU(c~0,da~0,di~DI,grb2!158,l,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kucg #Modifiers(Di01UL)
	r531: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2,grb2,l,r~0).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) kb45 #Modifiers(Cbl, Di11UU)
	r532: m__11UU(c~0,cbl!155,da~0,di~DI,grb2,grb2,l,r~0).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) ku45 #Modifiers(Di11CU)
	r533: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) kb45 #Modifiers(CG, Di11UU)
	r534: m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) ku45 #Modifiers(Di11LU)
	r535: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) -> m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kb68 #Modifiers(Grb2, Di11UU)
	r536: m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) ku68 #Modifiers(Di11UG)
	r537: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) -> Di11UL() kb68 #Modifiers(CG, Di11UU)
	r538: Di11UL() -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) ku68 #Modifiers(Di11UL)
	r539: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~0,di~DI,grb2,grb2,l,r~0).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) kbcg #Modifiers(Grb2, Di11CU)
	r540: m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~0,di~DI,grb2,grb2,l,r~0).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) kucg #Modifiers(Di11LU)
	r541: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~0,di~DI,grb2,grb2,l,r~0).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> Di11CG() kb68 #Modifiers(Grb2, Di11CU)
	r542: Di11CG() -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~0,di~DI,grb2,grb2,l,r~0).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) ku68 #Modifiers(Di11CG)
	r543: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) kb68 #Modifiers(Grb2, Di11LU)
	r544: m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) ku68 #Modifiers(Di11LG)
	r545: m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11C(_11CU~0,c~C,c2~0,da~0,di~DI,l,lu~0,r~0) kb68P #Modifiers(Di11LU)
	r546: m__11C(_11CU~0,c~C,c2~0,da~0,di~DI,l,lu~0,r~0) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) ku68M #Modifiers(Di11CC)
	r547: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> Di11CG() kb45 #Modifiers(Cbl, Di11UG)
	r548: Di11CG() -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) ku45 #Modifiers(Di11CG)
	r549: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) kb45 #Modifiers(CG, Di11UG)
	r550: m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) ku45 #Modifiers(Di11LG)
	r551: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> Di11UL() kbcg #Modifiers(Cbl, Di11UG)
	r552: Di11UL() -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kucg #Modifiers(Di11UL)
	r553: Di11UL() -> m__11C(_11CU~0,c~C,c2~0,da~0,di~DI,l,lu~0,r~0) kb45P #Modifiers(Di11UL)
	r554: m__11C(_11CU~0,c~C,c2~0,da~0,di~DI,l,lu~0,r~0) -> Di11UL() ku45M #Modifiers(Di11CC)
	r555: Di11CG() -> m__11C(_11CU~0,c~C,c2~0,da~0,di~DI,l,lu~0,r~0) kbcgP #Modifiers(Di11CG)
	r556: m__11C(_11CU~0,c~C,c2~0,da~0,di~DI,l,lu~0,r~0) -> Di11CG() kucgM #Modifiers(Di11CC)
	r557: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + Di11CG() -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) kbcg #Modifiers(Grb2, Di11CG)
	r558: m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + Di11CG() kucg #Modifiers(Di11LG)
	r559: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__02UU(c~0,da~0,di~DI,grb2,l,r~0) -> m__02UU(c~0,da~0,di~DI,grb2!159,l,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) fRate558() #Modifiers(Grb2, Di02UU)
	r560: m__02UU(c~0,da~0,di~DI,grb2!159,l,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__02UU(c~0,da~0,di~DI,grb2,l,r~0) ku68 #Modifiers(Di02UG)
	r561: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__02UU(c~0,da~0,di~DI,grb2,l,r~0) -> m__02UU(c~0,da~0,di~DI,grb2!159,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) fRate560() #Modifiers(CG, Di02UU)
	r562: m__02UU(c~0,da~0,di~DI,grb2!159,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__02UU(c~0,da~0,di~DI,grb2,l,r~0) ku68 #Modifiers(Di02UL)
	r563: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__02UU(c~0,da~0,di~DI,grb2!159,l,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> m__02UU(c~0,da~0,di~DI,grb2!159,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) kbcg #Modifiers(Cbl, Di02UG)
	r564: m__02UU(c~0,da~0,di~DI,grb2!159,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__02UU(c~0,da~0,di~DI,grb2!159,l,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) kucg #Modifiers(Di02UL)
	r565: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2,grb2,l,r~0).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) kb45 #Modifiers(Cbl, Di12UU)
	r566: m__12UU(c~0,cbl!160,da~0,di~DI,grb2,grb2,l,r~0).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) ku45 #Modifiers(Di12CU)
	r567: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) kb45 #Modifiers(CG, Di12UU)
	r568: m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) ku45 #Modifiers(Di12LU)
	r569: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) -> m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) fRate568() #Modifiers(Grb2, Di12UU)
	r570: m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) ku68 #Modifiers(Di12UG)
	r571: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) -> Di12UL() fRate570() #Modifiers(CG, Di12UU)
	r572: Di12UL() -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) ku68 #Modifiers(Di12UL)
	r573: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~0,di~DI,grb2,grb2,l,r~0).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) kbcg #Modifiers(Grb2, Di12CU)
	r574: m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~0,di~DI,grb2,grb2,l,r~0).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) kucg #Modifiers(Di12LU)
	r575: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~0,di~DI,grb2,grb2,l,r~0).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> Di12CG() fRate574() #Modifiers(Grb2, Di12CU)
	r576: Di12CG() -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~0,di~DI,grb2,grb2,l,r~0).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) ku68 #Modifiers(Di12CG)
	r577: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) fRate576() #Modifiers(Grb2, Di12LU)
	r578: m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) ku68 #Modifiers(Di12LG)
	r579: m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12C(_12CU~0,c~C,c2~0,da~0,di~DI,l,lu~0,r~0) fRate578() #Modifiers(Di12LU)
	r580: m__12C(_12CU~0,c~C,c2~0,da~0,di~DI,l,lu~0,r~0) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) ku68M #Modifiers(Di12CC)
	r581: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> Di12CG() kb45 #Modifiers(Cbl, Di12UG)
	r582: Di12CG() -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) ku45 #Modifiers(Di12CG)
	r583: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) kb45 #Modifiers(CG, Di12UG)
	r584: m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) ku45 #Modifiers(Di12LG)
	r585: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> Di12UL() kbcg #Modifiers(Cbl, Di12UG)
	r586: Di12UL() -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) kucg #Modifiers(Di12UL)
	r587: Di12UL() -> m__12C(_12CU~0,c~C,c2~0,da~0,di~DI,l,lu~0,r~0) kb45P #Modifiers(Di12UL)
	r588: m__12C(_12CU~0,c~C,c2~0,da~0,di~DI,l,lu~0,r~0) -> Di12UL() ku45M #Modifiers(Di12CC)
	r589: Di12CG() -> m__12C(_12CU~0,c~C,c2~0,da~0,di~DI,l,lu~0,r~0) kbcgP #Modifiers(Di12CG)
	r590: m__12C(_12CU~0,c~C,c2~0,da~0,di~DI,l,lu~0,r~0) -> Di12CG() kucgM #Modifiers(Di12CC)
	r591: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + Di12CG() -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) kbcg #Modifiers(Grb2, Di12CG)
	r592: m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + Di12CG() kucg #Modifiers(Di12LG)
	r593: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__10UU(c~0,cbl,da~DA,di~0,l,r~0) -> m__10UU(c~0,cbl!156,da~DA,di~0,l,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) kb45 #Modifiers(Cbl, Da10UU)
	r594: m__10UU(c~0,cbl!156,da~DA,di~0,l,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__10UU(c~0,cbl,da~DA,di~0,l,r~0) ku45 #Modifiers(Da10CU)
	r595: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__10UU(c~0,cbl,da~DA,di~0,l,r~0) -> m__10UU(c~0,cbl!156,da~DA,di~0,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) kb45 #Modifiers(CG, Da10UU)
	r596: m__10UU(c~0,cbl!156,da~DA,di~0,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__10UU(c~0,cbl,da~DA,di~0,l,r~0) ku45 #Modifiers(Da10LU)
	r597: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__10UU(c~0,cbl!156,da~DA,di~0,l,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> m__10UU(c~0,cbl!156,da~DA,di~0,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) kbcg #Modifiers(Grb2, Da10CU)
	r598: m__10UU(c~0,cbl!156,da~DA,di~0,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__10UU(c~0,cbl!156,da~DA,di~0,l,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) kucg #Modifiers(Da10LU)
	r599: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__01UU(c~0,da~DA,di~0,grb2,l,r~0) -> m__01UU(c~0,da~DA,di~0,grb2!158,l,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kb68 #Modifiers(Grb2, Da01UU)
	r600: m__01UU(c~0,da~DA,di~0,grb2!158,l,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__01UU(c~0,da~DA,di~0,grb2,l,r~0) ku68 #Modifiers(Da01UG)
	r601: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__01UU(c~0,da~DA,di~0,grb2,l,r~0) -> m__01UU(c~0,da~DA,di~0,grb2!158,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kb68 #Modifiers(CG, Da01UU)
	r602: m__01UU(c~0,da~DA,di~0,grb2!158,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__01UU(c~0,da~DA,di~0,grb2,l,r~0) ku68 #Modifiers(Da01UL)
	r603: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__01UU(c~0,da~DA,di~0,grb2!158,l,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> m__01UU(c~0,da~DA,di~0,grb2!158,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kbcg #Modifiers(Cbl, Da01UG)
	r604: m__01UU(c~0,da~DA,di~0,grb2!158,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__01UU(c~0,da~DA,di~0,grb2!158,l,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kucg #Modifiers(Da01UL)
	r605: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l,r~0).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) kb45 #Modifiers(Cbl, Da11UU)
	r606: m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l,r~0).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) ku45 #Modifiers(Da11CU)
	r607: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) kb45 #Modifiers(CG, Da11UU)
	r608: m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) ku45 #Modifiers(Da11LU)
	r609: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) -> m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kb68 #Modifiers(Grb2, Da11UU)
	r610: m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) ku68 #Modifiers(Da11UG)
	r611: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) -> Da11UL() kb68 #Modifiers(CG, Da11UU)
	r612: Da11UL() -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) ku68 #Modifiers(Da11UL)
	r613: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l,r~0).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) kbcg #Modifiers(Grb2, Da11CU)
	r614: m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l,r~0).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) kucg #Modifiers(Da11LU)
	r615: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l,r~0).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> Da11CG() kb68 #Modifiers(Grb2, Da11CU)
	r616: Da11CG() -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l,r~0).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) ku68 #Modifiers(Da11CG)
	r617: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) kb68 #Modifiers(Grb2, Da11LU)
	r618: m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) ku68 #Modifiers(Da11LG)
	r619: m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11C(_11CU~0,c~C,c2~0,da~DA,di~0,l,lu~0,r~0) kb68P #Modifiers(Da11LU)
	r620: m__11C(_11CU~0,c~C,c2~0,da~DA,di~0,l,lu~0,r~0) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) ku68M #Modifiers(Da11CC)
	r621: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> Da11CG() kb45 #Modifiers(Cbl, Da11UG)
	r622: Da11CG() -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) ku45 #Modifiers(Da11CG)
	r623: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) kb45 #Modifiers(CG, Da11UG)
	r624: m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) ku45 #Modifiers(Da11LG)
	r625: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> Da11UL() kbcg #Modifiers(Cbl, Da11UG)
	r626: Da11UL() -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kucg #Modifiers(Da11UL)
	r627: Da11UL() -> m__11C(_11CU~0,c~C,c2~0,da~DA,di~0,l,lu~0,r~0) kb45P #Modifiers(Da11UL)
	r628: m__11C(_11CU~0,c~C,c2~0,da~DA,di~0,l,lu~0,r~0) -> Da11UL() ku45M #Modifiers(Da11CC)
	r629: Da11CG() -> m__11C(_11CU~0,c~C,c2~0,da~DA,di~0,l,lu~0,r~0) kbcgP #Modifiers(Da11CG)
	r630: m__11C(_11CU~0,c~C,c2~0,da~DA,di~0,l,lu~0,r~0) -> Da11CG() kucgM #Modifiers(Da11CC)
	r631: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + Da11CG() -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) kbcg #Modifiers(Grb2, Da11CG)
	r632: m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + Da11CG() kucg #Modifiers(Da11LG)
	r633: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__02UU(c~0,da~DA,di~0,grb2,l,r~0) -> m__02UU(c~0,da~DA,di~0,grb2!159,l,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) fRate632() #Modifiers(Grb2, Da02UU)
	r634: m__02UU(c~0,da~DA,di~0,grb2!159,l,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__02UU(c~0,da~DA,di~0,grb2,l,r~0) ku68 #Modifiers(Da02UG)
	r635: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__02UU(c~0,da~DA,di~0,grb2,l,r~0) -> m__02UU(c~0,da~DA,di~0,grb2!159,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) fRate634() #Modifiers(CG, Da02UU)
	r636: m__02UU(c~0,da~DA,di~0,grb2!159,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__02UU(c~0,da~DA,di~0,grb2,l,r~0) ku68 #Modifiers(Da02UL)
	r637: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__02UU(c~0,da~DA,di~0,grb2!159,l,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> m__02UU(c~0,da~DA,di~0,grb2!159,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) kbcg #Modifiers(Cbl, Da02UG)
	r638: m__02UU(c~0,da~DA,di~0,grb2!159,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__02UU(c~0,da~DA,di~0,grb2!159,l,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) kucg #Modifiers(Da02UL)
	r639: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2,grb2,l,r~0).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) kb45 #Modifiers(Cbl, Da12UU)
	r640: m__12UU(c~0,cbl!160,da~DA,di~0,grb2,grb2,l,r~0).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) ku45 #Modifiers(Da12CU)
	r641: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) kb45 #Modifiers(CG, Da12UU)
	r642: m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) ku45 #Modifiers(Da12LU)
	r643: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) -> m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) fRate642() #Modifiers(Grb2, Da12UU)
	r644: m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) ku68 #Modifiers(Da12UG)
	r645: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) -> Da12UL() fRate644() #Modifiers(CG, Da12UU)
	r646: Da12UL() -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) ku68 #Modifiers(Da12UL)
	r647: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~DA,di~0,grb2,grb2,l,r~0).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) kbcg #Modifiers(Grb2, Da12CU)
	r648: m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~DA,di~0,grb2,grb2,l,r~0).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) kucg #Modifiers(Da12LU)
	r649: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~DA,di~0,grb2,grb2,l,r~0).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> Da12CG() fRate648() #Modifiers(Grb2, Da12CU)
	r650: Da12CG() -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~DA,di~0,grb2,grb2,l,r~0).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) ku68 #Modifiers(Da12CG)
	r651: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) fRate650() #Modifiers(Grb2, Da12LU)
	r652: m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) ku68 #Modifiers(Da12LG)
	r653: m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12C(_12CU~0,c~C,c2~0,da~DA,di~0,l,lu~0,r~0) fRate652() #Modifiers(Da12LU)
	r654: m__12C(_12CU~0,c~C,c2~0,da~DA,di~0,l,lu~0,r~0) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) ku68M #Modifiers(Da12CC)
	r655: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> Da12CG() kb45 #Modifiers(Cbl, Da12UG)
	r656: Da12CG() -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) ku45 #Modifiers(Da12CG)
	r657: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) kb45 #Modifiers(CG, Da12UG)
	r658: m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) ku45 #Modifiers(Da12LG)
	r659: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> Da12UL() kbcg #Modifiers(Cbl, Da12UG)
	r660: Da12UL() -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) kucg #Modifiers(Da12UL)
	r661: Da12UL() -> m__12C(_12CU~0,c~C,c2~0,da~DA,di~0,l,lu~0,r~0) kb45P #Modifiers(Da12UL)
	r662: m__12C(_12CU~0,c~C,c2~0,da~DA,di~0,l,lu~0,r~0) -> Da12UL() ku45M #Modifiers(Da12CC)
	r663: Da12CG() -> m__12C(_12CU~0,c~C,c2~0,da~DA,di~0,l,lu~0,r~0) kbcgP #Modifiers(Da12CG)
	r664: m__12C(_12CU~0,c~C,c2~0,da~DA,di~0,l,lu~0,r~0) -> Da12CG() kucgM #Modifiers(Da12CC)
	r665: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + Da12CG() -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) kbcg #Modifiers(Grb2, Da12CG)
	r666: m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + Da12CG() kucg #Modifiers(Da12LG)
	r667: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~0,di~DI,l!162,r~0) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~DI,l!162,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) kb45 #Modifiers(Cbl, DiL10UU)
	r668: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~DI,l!162,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~0,di~DI,l!162,r~0) ku45 #Modifiers(DiL10CU)
	r669: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~0,di~DI,l!162,r~0) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~DI,l!162,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) kb45 #Modifiers(CG, DiL10UU)
	r670: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~DI,l!162,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~0,di~DI,l!162,r~0) ku45 #Modifiers(DiL10LU)
	r671: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~DI,l!162,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~DI,l!162,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) kbcg #Modifiers(Grb2, DiL10CU)
	r672: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~DI,l!162,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~DI,l!162,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) kucg #Modifiers(DiL10LU)
	r673: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2,l!164,r~0) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2!158,l!164,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kb68 #Modifiers(Grb2, DiL01UU)
	r674: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2!158,l!164,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2,l!164,r~0) ku68 #Modifiers(DiL01UG)
	r675: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2,l!164,r~0) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2!158,l!164,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kb68 #Modifiers(CG, DiL01UU)
	r676: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2!158,l!164,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2,l!164,r~0) ku68 #Modifiers(DiL01UL)
	r677: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2!158,l!164,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2!158,l!164,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kbcg #Modifiers(Cbl, DiL01UG)
	r678: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2!158,l!164,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2!158,l!164,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kucg #Modifiers(DiL01UL)
	r679: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) kb45 #Modifiers(Cbl, DiL11UU)
	r680: m__11UU(c~0,cbl!155,da~0,di~DI,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) ku45 #Modifiers(DiL11CU)
	r681: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) kb45 #Modifiers(CG, DiL11UU)
	r682: m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) ku45 #Modifiers(DiL11LU)
	r683: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kb68 #Modifiers(Grb2, DiL11UU)
	r684: m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) ku68 #Modifiers(DiL11UG)
	r685: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> DiL11UL() kb68 #Modifiers(CG, DiL11UU)
	r686: DiL11UL() -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) ku68 #Modifiers(DiL11UL)
	r687: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~0,di~DI,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) kbcg #Modifiers(Grb2, DiL11CU)
	r688: m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~0,di~DI,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) kucg #Modifiers(DiL11LU)
	r689: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~0,di~DI,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> DiL11CG() kb68 #Modifiers(Grb2, DiL11CU)
	r690: DiL11CG() -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~0,di~DI,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) ku68 #Modifiers(DiL11CG)
	r691: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2!171,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) kb68 #Modifiers(Grb2, DiL11LU)
	r692: m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2!171,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) ku68 #Modifiers(DiL11LG)
	r693: m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11C(_11CU~0,c~C,c2~0,da~0,di~DI,l!169,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) kb68P #Modifiers(DiL11LU)
	r694: m__11C(_11CU~0,c~C,c2~0,da~0,di~DI,l!169,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) ku68M #Modifiers(DiL11CC)
	r695: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> DiL11CG() kb45 #Modifiers(Cbl, DiL11UG)
	r696: DiL11CG() -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) ku45 #Modifiers(DiL11CG)
	r697: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2!171,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) kb45 #Modifiers(CG, DiL11UG)
	r698: m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2!171,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) ku45 #Modifiers(DiL11LG)
	r699: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> DiL11UL() kbcg #Modifiers(Cbl, DiL11UG)
	r700: DiL11UL() -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kucg #Modifiers(DiL11UL)
	r701: DiL11UL() -> m__11C(_11CU~0,c~C,c2~0,da~0,di~DI,l!169,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) kb45P #Modifiers(DiL11UL)
	r702: m__11C(_11CU~0,c~C,c2~0,da~0,di~DI,l!169,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) -> DiL11UL() ku45M #Modifiers(DiL11CC)
	r703: DiL11CG() -> m__11C(_11CU~0,c~C,c2~0,da~0,di~DI,l!169,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) kbcgP #Modifiers(DiL11CG)
	r704: m__11C(_11CU~0,c~C,c2~0,da~0,di~DI,l!169,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) -> DiL11CG() kucgM #Modifiers(DiL11CC)
	r705: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + DiL11CG() -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2!171,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) kbcg #Modifiers(Grb2, DiL11CG)
	r706: m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2!171,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + DiL11CG() kucg #Modifiers(DiL11LG)
	r707: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2,l!166,r~0) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2!159,l!166,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) fRate706() #Modifiers(Grb2, DiL02UU)
	r708: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2!159,l!166,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2,l!166,r~0) ku68 #Modifiers(DiL02UG)
	r709: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2,l!166,r~0) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2!159,l!166,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) fRate708() #Modifiers(CG, DiL02UU)
	r710: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2!159,l!166,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2,l!166,r~0) ku68 #Modifiers(DiL02UL)
	r711: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2!159,l!166,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2!159,l!166,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) kbcg #Modifiers(Cbl, DiL02UG)
	r712: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2!159,l!166,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2!159,l!166,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) kucg #Modifiers(DiL02UL)
	r713: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) kb45 #Modifiers(Cbl, DiL12UU)
	r714: m__12UU(c~0,cbl!160,da~0,di~DI,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) ku45 #Modifiers(DiL12CU)
	r715: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) kb45 #Modifiers(CG, DiL12UU)
	r716: m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) ku45 #Modifiers(DiL12LU)
	r717: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) fRate716() #Modifiers(Grb2, DiL12UU)
	r718: m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) ku68 #Modifiers(DiL12UG)
	r719: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> DiL12UL() fRate718() #Modifiers(CG, DiL12UU)
	r720: DiL12UL() -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) ku68 #Modifiers(DiL12UL)
	r721: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~0,di~DI,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) kbcg #Modifiers(Grb2, DiL12CU)
	r722: m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~0,di~DI,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) kucg #Modifiers(DiL12LU)
	r723: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~0,di~DI,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> DiL12CG() fRate722() #Modifiers(Grb2, DiL12CU)
	r724: DiL12CG() -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~0,di~DI,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) ku68 #Modifiers(DiL12CG)
	r725: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2!170,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) fRate724() #Modifiers(Grb2, DiL12LU)
	r726: m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2!170,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) ku68 #Modifiers(DiL12LG)
	r727: m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12C(_12CU~0,c~C,c2~0,da~0,di~DI,l!168,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) fRate726() #Modifiers(DiL12LU)
	r728: m__12C(_12CU~0,c~C,c2~0,da~0,di~DI,l!168,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) ku68M #Modifiers(DiL12CC)
	r729: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> DiL12CG() kb45 #Modifiers(Cbl, DiL12UG)
	r730: DiL12CG() -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) ku45 #Modifiers(DiL12CG)
	r731: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2!170,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) kb45 #Modifiers(CG, DiL12UG)
	r732: m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2!170,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) ku45 #Modifiers(DiL12LG)
	r733: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> DiL12UL() kbcg #Modifiers(Cbl, DiL12UG)
	r734: DiL12UL() -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) kucg #Modifiers(DiL12UL)
	r735: DiL12UL() -> m__12C(_12CU~0,c~C,c2~0,da~0,di~DI,l!168,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) kb45P #Modifiers(DiL12UL)
	r736: m__12C(_12CU~0,c~C,c2~0,da~0,di~DI,l!168,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) -> DiL12UL() ku45M #Modifiers(DiL12CC)
	r737: DiL12CG() -> m__12C(_12CU~0,c~C,c2~0,da~0,di~DI,l!168,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) kbcgP #Modifiers(DiL12CG)
	r738: m__12C(_12CU~0,c~C,c2~0,da~0,di~DI,l!168,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) -> DiL12CG() kucgM #Modifiers(DiL12CC)
	r739: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + DiL12CG() -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2!170,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) kbcg #Modifiers(Grb2, DiL12CG)
	r740: m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2!170,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + DiL12CG() kucg #Modifiers(DiL12LG)
	r741: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~DA,di~0,l!162,r~0) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~DA,di~0,l!162,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) kb45 #Modifiers(Cbl, DaL10UU)
	r742: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~DA,di~0,l!162,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~DA,di~0,l!162,r~0) ku45 #Modifiers(DaL10CU)
	r743: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~DA,di~0,l!162,r~0) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~DA,di~0,l!162,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) kb45 #Modifiers(CG, DaL10UU)
	r744: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~DA,di~0,l!162,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~DA,di~0,l!162,r~0) ku45 #Modifiers(DaL10LU)
	r745: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~DA,di~0,l!162,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~DA,di~0,l!162,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) kbcg #Modifiers(Grb2, DaL10CU)
	r746: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~DA,di~0,l!162,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~DA,di~0,l!162,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) kucg #Modifiers(DaL10LU)
	r747: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2,l!164,r~0) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2!158,l!164,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kb68 #Modifiers(Grb2, DaL01UU)
	r748: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2!158,l!164,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2,l!164,r~0) ku68 #Modifiers(DaL01UG)
	r749: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2,l!164,r~0) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2!158,l!164,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kb68 #Modifiers(CG, DaL01UU)
	r750: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2!158,l!164,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2,l!164,r~0) ku68 #Modifiers(DaL01UL)
	r751: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2!158,l!164,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2!158,l!164,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kbcg #Modifiers(Cbl, DaL01UG)
	r752: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2!158,l!164,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2!158,l!164,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kucg #Modifiers(DaL01UL)
	r753: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) kb45 #Modifiers(Cbl, DaL11UU)
	r754: m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) ku45 #Modifiers(DaL11CU)
	r755: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) kb45 #Modifiers(CG, DaL11UU)
	r756: m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) ku45 #Modifiers(DaL11LU)
	r757: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kb68 #Modifiers(Grb2, DaL11UU)
	r758: m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) ku68 #Modifiers(DaL11UG)
	r759: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> DaL11UL() kb68 #Modifiers(CG, DaL11UU)
	r760: DaL11UL() -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) ku68 #Modifiers(DaL11UL)
	r761: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) kbcg #Modifiers(Grb2, DaL11CU)
	r762: m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) kucg #Modifiers(DaL11LU)
	r763: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> DaL11CG() kb68 #Modifiers(Grb2, DaL11CU)
	r764: DaL11CG() -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) ku68 #Modifiers(DaL11CG)
	r765: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2!171,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) kb68 #Modifiers(Grb2, DaL11LU)
	r766: m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2!171,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) ku68 #Modifiers(DaL11LG)
	r767: m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11C(_11CU~0,c~C,c2~0,da~DA,di~0,l!169,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) kb68P #Modifiers(DaL11LU)
	r768: m__11C(_11CU~0,c~C,c2~0,da~DA,di~0,l!169,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) ku68M #Modifiers(DaL11CC)
	r769: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> DaL11CG() kb45 #Modifiers(Cbl, DaL11UG)
	r770: DaL11CG() -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) ku45 #Modifiers(DaL11CG)
	r771: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2!171,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) kb45 #Modifiers(CG, DaL11UG)
	r772: m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2!171,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) ku45 #Modifiers(DaL11LG)
	r773: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> DaL11UL() kbcg #Modifiers(Cbl, DaL11UG)
	r774: DaL11UL() -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kucg #Modifiers(DaL11UL)
	r775: DaL11UL() -> m__11C(_11CU~0,c~C,c2~0,da~DA,di~0,l!169,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) kb45P #Modifiers(DaL11UL)
	r776: m__11C(_11CU~0,c~C,c2~0,da~DA,di~0,l!169,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) -> DaL11UL() ku45M #Modifiers(DaL11CC)
	r777: DaL11CG() -> m__11C(_11CU~0,c~C,c2~0,da~DA,di~0,l!169,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) kbcgP #Modifiers(DaL11CG)
	r778: m__11C(_11CU~0,c~C,c2~0,da~DA,di~0,l!169,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) -> DaL11CG() kucgM #Modifiers(DaL11CC)
	r779: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + DaL11CG() -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2!171,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) kbcg #Modifiers(Grb2, DaL11CG)
	r780: m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2!171,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + DaL11CG() kucg #Modifiers(DaL11LG)
	r781: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2,l!166,r~0) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2!159,l!166,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) fRate780() #Modifiers(Grb2, DaL02UU)
	r782: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2!159,l!166,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2,l!166,r~0) ku68 #Modifiers(DaL02UG)
	r783: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2,l!166,r~0) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2!159,l!166,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) fRate782() #Modifiers(CG, DaL02UU)
	r784: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2!159,l!166,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2,l!166,r~0) ku68 #Modifiers(DaL02UL)
	r785: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2!159,l!166,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2!159,l!166,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) kbcg #Modifiers(Cbl, DaL02UG)
	r786: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2!159,l!166,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2!159,l!166,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) kucg #Modifiers(DaL02UL)
	r787: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) kb45 #Modifiers(Cbl, DaL12UU)
	r788: m__12UU(c~0,cbl!160,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) ku45 #Modifiers(DaL12CU)
	r789: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) kb45 #Modifiers(CG, DaL12UU)
	r790: m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) ku45 #Modifiers(DaL12LU)
	r791: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) fRate790() #Modifiers(Grb2, DaL12UU)
	r792: m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) ku68 #Modifiers(DaL12UG)
	r793: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> DaL12UL() fRate792() #Modifiers(CG, DaL12UU)
	r794: DaL12UL() -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) ku68 #Modifiers(DaL12UL)
	r795: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) kbcg #Modifiers(Grb2, DaL12CU)
	r796: m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) kucg #Modifiers(DaL12LU)
	r797: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> DaL12CG() fRate796() #Modifiers(Grb2, DaL12CU)
	r798: DaL12CG() -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) ku68 #Modifiers(DaL12CG)
	r799: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2!170,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) fRate798() #Modifiers(Grb2, DaL12LU)
	r800: m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2!170,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) ku68 #Modifiers(DaL12LG)
	r801: m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12C(_12CU~0,c~C,c2~0,da~DA,di~0,l!168,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) fRate800() #Modifiers(DaL12LU)
	r802: m__12C(_12CU~0,c~C,c2~0,da~DA,di~0,l!168,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) ku68M #Modifiers(DaL12CC)
	r803: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> DaL12CG() kb45 #Modifiers(Cbl, DaL12UG)
	r804: DaL12CG() -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) ku45 #Modifiers(DaL12CG)
	r805: Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2!170,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) kb45 #Modifiers(CG, DaL12UG)
	r806: m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2!170,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2) + m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) ku45 #Modifiers(DaL12LG)
	r807: Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> DaL12UL() kbcg #Modifiers(Cbl, DaL12UG)
	r808: DaL12UL() -> Cbl(_10uu,_11uu,_12uu,grb2,grb2) + m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) kucg #Modifiers(DaL12UL)
	r809: DaL12UL() -> m__12C(_12CU~0,c~C,c2~0,da~DA,di~0,l!168,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) kb45P #Modifiers(DaL12UL)
	r810: m__12C(_12CU~0,c~C,c2~0,da~DA,di~0,l!168,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) -> DaL12UL() ku45M #Modifiers(DaL12CC)
	r811: DaL12CG() -> m__12C(_12CU~0,c~C,c2~0,da~DA,di~0,l!168,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) kbcgP #Modifiers(DaL12CG)
	r812: m__12C(_12CU~0,c~C,c2~0,da~DA,di~0,l!168,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) -> DaL12CG() kucgM #Modifiers(DaL12CC)
	r813: Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + DaL12CG() -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2!170,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) kbcg #Modifiers(Grb2, DaL12CG)
	r814: m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2!170,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) -> Grb2(_01uu,_02uu,_11uu,_12uu,cbl) + DaL12CG() kucg #Modifiers(DaL12LG)
	r815: m__00UU(c~0,da~0,di~0,l,r~R) -> m__00UU(c~C,da~0,di~0,l,r~R) kc #Modifiers(R00UU)
	r816: m__10UU(c~0,cbl,da~0,di~0,l,r~R) -> m__10UU(c~C,cbl,da~0,di~0,l,r~R) kc #Modifiers(R10UU)
	r817: m__10UU(c~0,cbl!156,da~0,di~0,l,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> m__10UU(c~C,cbl!156,da~0,di~0,l,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) kc #Modifiers(R10CU)
	r818: m__10UU(c~0,cbl!156,da~0,di~0,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> m__10UU(c~C,cbl!156,da~0,di~0,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) kc #Modifiers(R10LU)
	r819: m__01UU(c~0,da~0,di~0,grb2,l,r~R) -> m__01UU(c~C,da~0,di~0,grb2,l,r~R) kc #Modifiers(R01UU)
	r820: m__01UU(c~0,da~0,di~0,grb2!158,l,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> m__01UU(c~C,da~0,di~0,grb2!158,l,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kc #Modifiers(R01UG)
	r821: m__01UU(c~0,da~0,di~0,grb2!158,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> m__01UU(c~C,da~0,di~0,grb2!158,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kc #Modifiers(R01UL)
	r822: m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) -> m__11UU(c~C,cbl,da~0,di~0,grb2,grb2,l,r~R) kc #Modifiers(R11UU)
	r823: m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__11UU(c~C,cbl!155,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) kc #Modifiers(R11CU)
	r824: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) kc #Modifiers(R11LU)
	r825: m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__11UU(c~C,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kc #Modifiers(R11UG)
	r826: R11UL() -> Rc11UL() kc #Modifiers(R11UL)
	r827: R11CG() -> Rc11CG() kc #Modifiers(R11CG)
	r828: m__11C(_11CU~0,c~C,c2~0,da~0,di~0,l,lu~0,r~R) -> m__11C(_11CU~0,c~C,c2~C,da~0,di~0,l,lu~0,r~R) kc #Modifiers(R11CC)
	r829: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) kc #Modifiers(R11LG)
	r830: m__02UU(c~0,da~0,di~0,grb2,l,r~R) -> m__02UU(c~C,da~0,di~0,grb2,l,r~R) kc #Modifiers(R02UU)
	r831: m__02UU(c~0,da~0,di~0,grb2!159,l,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> m__02UU(c~C,da~0,di~0,grb2!159,l,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) kc #Modifiers(R02UG)
	r832: m__02UU(c~0,da~0,di~0,grb2!159,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> m__02UU(c~C,da~0,di~0,grb2!159,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) kc #Modifiers(R02UL)
	r833: m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) -> m__12UU(c~C,cbl,da~0,di~0,grb2,grb2,l,r~R) kc #Modifiers(R12UU)
	r834: m__12UU(c~0,cbl!160,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__12UU(c~C,cbl!160,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) kc #Modifiers(R12CU)
	r835: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) kc #Modifiers(R12LU)
	r836: m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__12UU(c~C,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) kc #Modifiers(R12UG)
	r837: R12UL() -> Rc12UL() kc #Modifiers(R12UL)
	r838: R12CG() -> Rc12CG() kc #Modifiers(R12CG)
	r839: m__12C(_12CU~0,c~C,c2~0,da~0,di~0,l,lu~0,r~R) -> m__12C(_12CU~0,c~C,c2~C,da~0,di~0,l,lu~0,r~R) kc #Modifiers(R12CC)
	r840: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) kc #Modifiers(R12LG)
	r841: m__00UU(c~C,da~0,di~0,l,r~R) -> m__00UU(c~0,da~0,di~0,l,r~R) ko #Modifiers(Rc00UU)
	r842: m__10UU(c~C,cbl,da~0,di~0,l,r~R) -> m__10UU(c~0,cbl,da~0,di~0,l,r~R) ko #Modifiers(Rc10UU)
	r843: m__10UU(c~C,cbl!156,da~0,di~0,l,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> m__10UU(c~0,cbl!156,da~0,di~0,l,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) ko #Modifiers(Rc10CU)
	r844: m__10UU(c~C,cbl!156,da~0,di~0,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> m__10UU(c~0,cbl!156,da~0,di~0,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) ko #Modifiers(Rc10LU)
	r845: m__01UU(c~C,da~0,di~0,grb2,l,r~R) -> m__01UU(c~0,da~0,di~0,grb2,l,r~R) ko #Modifiers(Rc01UU)
	r846: m__01UU(c~C,da~0,di~0,grb2!158,l,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> m__01UU(c~0,da~0,di~0,grb2!158,l,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) ko #Modifiers(Rc01UG)
	r847: m__01UU(c~C,da~0,di~0,grb2!158,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> m__01UU(c~0,da~0,di~0,grb2!158,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) ko #Modifiers(Rc01UL)
	r848: m__11UU(c~C,cbl,da~0,di~0,grb2,grb2,l,r~R) -> m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) ko #Modifiers(Rc11UU)
	r849: m__11UU(c~C,cbl!155,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) ko #Modifiers(Rc11CU)
	r850: m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) ko #Modifiers(Rc11LU)
	r851: m__11UU(c~C,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) ko #Modifiers(Rc11UG)
	r852: Rc11UL() -> R11UL() ko #Modifiers(Rc11UL)
	r853: Rc11CG() -> R11CG() ko #Modifiers(Rc11CG)
	r854: m__11C(_11CU~0,c~C,c2~C,da~0,di~0,l,lu~0,r~R) -> m__11C(_11CU~0,c~C,c2~0,da~0,di~0,l,lu~0,r~R) ko #Modifiers(Rc11CC)
	r855: m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) ko #Modifiers(Rc11LG)
	r856: m__02UU(c~C,da~0,di~0,grb2,l,r~R) -> m__02UU(c~0,da~0,di~0,grb2,l,r~R) ko #Modifiers(Rc02UU)
	r857: m__02UU(c~C,da~0,di~0,grb2!159,l,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> m__02UU(c~0,da~0,di~0,grb2!159,l,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) ko #Modifiers(Rc02UG)
	r858: m__02UU(c~C,da~0,di~0,grb2!159,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> m__02UU(c~0,da~0,di~0,grb2!159,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) ko #Modifiers(Rc02UL)
	r859: m__12UU(c~C,cbl,da~0,di~0,grb2,grb2,l,r~R) -> m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) ko #Modifiers(Rc12UU)
	r860: m__12UU(c~C,cbl!160,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) ko #Modifiers(Rc12CU)
	r861: m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) ko #Modifiers(Rc12LU)
	r862: m__12UU(c~C,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) ko #Modifiers(Rc12UG)
	r863: Rc12UL() -> R12UL() ko #Modifiers(Rc12UL)
	r864: Rc12CG() -> R12CG() ko #Modifiers(Rc12CG)
	r865: m__12C(_12CU~0,c~C,c2~C,da~0,di~0,l,lu~0,r~R) -> m__12C(_12CU~0,c~C,c2~0,da~0,di~0,l,lu~0,r~R) ko #Modifiers(Rc12CC)
	r866: m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) ko #Modifiers(Rc12LG)
	r867: L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~0,di~0,l!163,r~R) -> L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~C,da~0,di~0,l!163,r~R) k1c #Modifiers(RL00UU)
	r868: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~0,di~0,l!162,r~R) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~C,cbl,da~0,di~0,l!162,r~R) k1c #Modifiers(RL10UU)
	r869: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~0,l!162,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~C,cbl!156,da~0,di~0,l!162,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) k1c #Modifiers(RL10CU)
	r870: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~0,l!162,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~C,cbl!156,da~0,di~0,l!162,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) k1c #Modifiers(RL10LU)
	r871: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2,l!164,r~R) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2,l!164,r~R) k1c #Modifiers(RL01UU)
	r872: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2!158,l!164,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2!158,l!164,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) k1c #Modifiers(RL01UG)
	r873: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2!158,l!164,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2!158,l!164,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) k1c #Modifiers(RL01UL)
	r874: m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> m__11UU(c~C,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) k1c #Modifiers(RL11UU)
	r875: m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__11UU(c~C,cbl!155,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) k1c #Modifiers(RL11CU)
	r876: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) k1c #Modifiers(RL11LU)
	r877: m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__11UU(c~C,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) k1c #Modifiers(RL11UG)
	r878: RL11UL() -> RcL11UL() k1c #Modifiers(RL11UL)
	r879: RL11CG() -> RcL11CG() k1c #Modifiers(RL11CG)
	r880: m__11C(_11CU~0,c~C,c2~0,da~0,di~0,l!169,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) -> m__11C(_11CU~0,c~C,c2~C,da~0,di~0,l!169,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) k1c #Modifiers(RL11CC)
	r881: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2!171,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) -> m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2!171,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) k1c #Modifiers(RL11LG)
	r882: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2,l!166,r~R) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2,l!166,r~R) k1c #Modifiers(RL02UU)
	r883: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2!159,l!166,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2!159,l!166,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) k1c #Modifiers(RL02UG)
	r884: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2!159,l!166,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2!159,l!166,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) k1c #Modifiers(RL02UL)
	r885: m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> m__12UU(c~C,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) k1c #Modifiers(RL12UU)
	r886: m__12UU(c~0,cbl!160,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__12UU(c~C,cbl!160,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) k1c #Modifiers(RL12CU)
	r887: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) k1c #Modifiers(RL12LU)
	r888: m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__12UU(c~C,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) k1c #Modifiers(RL12UG)
	r889: RL12UL() -> RcL12UL() k1c #Modifiers(RL12UL)
	r890: RL12CG() -> RcL12CG() k1c #Modifiers(RL12CG)
	r891: m__12C(_12CU~0,c~C,c2~0,da~0,di~0,l!168,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) -> m__12C(_12CU~0,c~C,c2~C,da~0,di~0,l!168,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) k1c #Modifiers(RL12CC)
	r892: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2!170,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) -> m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2!170,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) k1c #Modifiers(RL12LG)
	r893: L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~C,da~0,di~0,l!163,r~R) -> L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~0,di~0,l!163,r~R) k1o #Modifiers(RcL00UU)
	r894: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~C,cbl,da~0,di~0,l!162,r~R) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~0,di~0,l!162,r~R) k1o #Modifiers(RcL10UU)
	r895: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~C,cbl!156,da~0,di~0,l!162,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~0,l!162,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) k1o #Modifiers(RcL10CU)
	r896: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~C,cbl!156,da~0,di~0,l!162,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~0,l!162,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) k1o #Modifiers(RcL10LU)
	r897: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2,l!164,r~R) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2,l!164,r~R) k1o #Modifiers(RcL01UU)
	r898: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2!158,l!164,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2!158,l!164,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) k1o #Modifiers(RcL01UG)
	r899: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2!158,l!164,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2!158,l!164,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) k1o #Modifiers(RcL01UL)
	r900: m__11UU(c~C,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) k1o #Modifiers(RcL11UU)
	r901: m__11UU(c~C,cbl!155,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) k1o #Modifiers(RcL11CU)
	r902: m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) k1o #Modifiers(RcL11LU)
	r903: m__11UU(c~C,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) k1o #Modifiers(RcL11UG)
	r904: RcL11UL() -> RL11UL() k1o #Modifiers(RcL11UL)
	r905: RcL11CG() -> RL11CG() k1o #Modifiers(RcL11CG)
	r906: m__11C(_11CU~0,c~C,c2~C,da~0,di~0,l!169,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) -> m__11C(_11CU~0,c~C,c2~0,da~0,di~0,l!169,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) k1o #Modifiers(RcL11CC)
	r907: m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2!171,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2!171,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) k1o #Modifiers(RcL11LG)
	r908: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2,l!166,r~R) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2,l!166,r~R) k1o #Modifiers(RcL02UU)
	r909: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2!159,l!166,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2!159,l!166,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) k1o #Modifiers(RcL02UG)
	r910: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2!159,l!166,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2!159,l!166,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) k1o #Modifiers(RcL02UL)
	r911: m__12UU(c~C,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) k1o #Modifiers(RcL12UU)
	r912: m__12UU(c~C,cbl!160,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) k1o #Modifiers(RcL12CU)
	r913: m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) k1o #Modifiers(RcL12LU)
	r914: m__12UU(c~C,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) k1o #Modifiers(RcL12UG)
	r915: RcL12UL() -> RL12UL() k1o #Modifiers(RcL12UL)
	r916: RcL12CG() -> RL12CG() k1o #Modifiers(RcL12CG)
	r917: m__12C(_12CU~0,c~C,c2~C,da~0,di~0,l!168,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) -> m__12C(_12CU~0,c~C,c2~0,da~0,di~0,l!168,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) k1o #Modifiers(RcL12CC)
	r918: m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2!170,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2!170,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) k1o #Modifiers(RcL12LG)
	r919: m__00UU(c~0,da~0,di~0,l,r~R) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~0,di~0,l!163,r~R) kb #Modifiers(R00UU, L)
	r920: m__10UU(c~0,cbl,da~0,di~0,l,r~R) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~0,di~0,l!162,r~R) kb #Modifiers(R10UU, L)
	r921: m__10UU(c~0,cbl!156,da~0,di~0,l,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~0,l!162,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) kb #Modifiers(R10CU, L)
	r922: m__10UU(c~0,cbl!156,da~0,di~0,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~0,l!162,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) kb #Modifiers(R10LU, L)
	r923: m__01UU(c~0,da~0,di~0,grb2,l,r~R) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2,l!164,r~R) kb #Modifiers(R01UU, L)
	r924: m__01UU(c~0,da~0,di~0,grb2!158,l,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2!158,l!164,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kb #Modifiers(R01UG, L)
	r925: m__01UU(c~0,da~0,di~0,grb2!158,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2!158,l!164,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kb #Modifiers(R01UL, L)
	r926: m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) kb #Modifiers(R11UU, L)
	r927: m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) kb #Modifiers(R11CU, L)
	r928: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) kb #Modifiers(R11LU, L)
	r929: m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kb #Modifiers(R11UG, L)
	r930: R11UL() + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> RL11UL() kb #Modifiers(R11UL, L)
	r931: R11CG() + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> RL11CG() kb #Modifiers(R11CG, L)
	r932: m__11C(_11CU~0,c~C,c2~0,da~0,di~0,l,lu~0,r~R) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__11C(_11CU~0,c~C,c2~0,da~0,di~0,l!169,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) kb #Modifiers(R11CC, L)
	r933: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2!171,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) kb #Modifiers(R11LG, L)
	r934: m__02UU(c~0,da~0,di~0,grb2,l,r~R) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2,l!166,r~R) kb #Modifiers(R02UU, L)
	r935: m__02UU(c~0,da~0,di~0,grb2!159,l,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2!159,l!166,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) kb #Modifiers(R02UG, L)
	r936: m__02UU(c~0,da~0,di~0,grb2!159,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2!159,l!166,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) kb #Modifiers(R02UL, L)
	r937: m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) kb #Modifiers(R12UU, L)
	r938: m__12UU(c~0,cbl!160,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) kb #Modifiers(R12CU, L)
	r939: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) kb #Modifiers(R12LU, L)
	r940: m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) kb #Modifiers(R12UG, L)
	r941: R12UL() + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> RL12UL() kb #Modifiers(R12UL, L)
	r942: R12CG() + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> RL12CG() kb #Modifiers(R12CG, L)
	r943: m__12C(_12CU~0,c~C,c2~0,da~0,di~0,l,lu~0,r~R) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__12C(_12CU~0,c~C,c2~0,da~0,di~0,l!168,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) kb #Modifiers(R12CC, L)
	r944: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2!170,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) kb #Modifiers(R12LG, L)
	r945: m__00UU(c~C,da~0,di~0,l,r~R) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~C,da~0,di~0,l!163,r~R) k1b #Modifiers(Rc00UU, L)
	r946: m__10UU(c~C,cbl,da~0,di~0,l,r~R) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~C,cbl,da~0,di~0,l!162,r~R) k1b #Modifiers(Rc10UU, L)
	r947: m__10UU(c~C,cbl!156,da~0,di~0,l,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~C,cbl!156,da~0,di~0,l!162,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) k1b #Modifiers(Rc10CU, L)
	r948: m__10UU(c~C,cbl!156,da~0,di~0,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~C,cbl!156,da~0,di~0,l!162,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) k1b #Modifiers(Rc10LU, L)
	r949: m__01UU(c~C,da~0,di~0,grb2,l,r~R) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2,l!164,r~R) k1b #Modifiers(Rc01UU, L)
	r950: m__01UU(c~C,da~0,di~0,grb2!158,l,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2!158,l!164,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) k1b #Modifiers(Rc01UG, L)
	r951: m__01UU(c~C,da~0,di~0,grb2!158,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2!158,l!164,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) k1b #Modifiers(Rc01UL, L)
	r952: m__11UU(c~C,cbl,da~0,di~0,grb2,grb2,l,r~R) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__11UU(c~C,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) k1b #Modifiers(Rc11UU, L)
	r953: m__11UU(c~C,cbl!155,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__11UU(c~C,cbl!155,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) k1b #Modifiers(Rc11CU, L)
	r954: m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) k1b #Modifiers(Rc11LU, L)
	r955: m__11UU(c~C,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__11UU(c~C,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) k1b #Modifiers(Rc11UG, L)
	r956: Rc11UL() + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> RcL11UL() k1b #Modifiers(Rc11UL, L)
	r957: Rc11CG() + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> RcL11CG() k1b #Modifiers(Rc11CG, L)
	r958: m__11C(_11CU~0,c~C,c2~C,da~0,di~0,l,lu~0,r~R) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__11C(_11CU~0,c~C,c2~C,da~0,di~0,l!169,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) k1b #Modifiers(Rc11CC, L)
	r959: m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2!171,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) k1b #Modifiers(Rc11LG, L)
	r960: m__02UU(c~C,da~0,di~0,grb2,l,r~R) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2,l!166,r~R) k1b #Modifiers(Rc02UU, L)
	r961: m__02UU(c~C,da~0,di~0,grb2!159,l,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2!159,l!166,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) k1b #Modifiers(Rc02UG, L)
	r962: m__02UU(c~C,da~0,di~0,grb2!159,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2!159,l!166,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) k1b #Modifiers(Rc02UL, L)
	r963: m__12UU(c~C,cbl,da~0,di~0,grb2,grb2,l,r~R) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__12UU(c~C,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) k1b #Modifiers(Rc12UU, L)
	r964: m__12UU(c~C,cbl!160,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__12UU(c~C,cbl!160,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) k1b #Modifiers(Rc12CU, L)
	r965: m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) k1b #Modifiers(Rc12LU, L)
	r966: m__12UU(c~C,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__12UU(c~C,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) k1b #Modifiers(Rc12UG, L)
	r967: Rc12UL() + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> RcL12UL() k1b #Modifiers(Rc12UL, L)
	r968: Rc12CG() + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> RcL12CG() k1b #Modifiers(Rc12CG, L)
	r969: m__12C(_12CU~0,c~C,c2~C,da~0,di~0,l,lu~0,r~R) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__12C(_12CU~0,c~C,c2~C,da~0,di~0,l!168,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) k1b #Modifiers(Rc12CC, L)
	r970: m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2!170,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) k1b #Modifiers(Rc12LG, L)
	r971: m__00UU(c~0,da~0,di~DI,l,r~0) -> m__00UU(c~0,da~DA,di~0,l,r~0) fRate970() #Modifiers(L, Di00UU, L)
	r972: m__10UU(c~0,cbl,da~0,di~DI,l,r~0) -> m__10UU(c~0,cbl,da~DA,di~0,l,r~0) fRate971() #Modifiers(L, Di10UU, L)
	r973: m__10UU(c~0,cbl!156,da~0,di~DI,l,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> m__10UU(c~0,cbl!156,da~DA,di~0,l,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) fRate972() #Modifiers(L, Di10CU, L)
	r974: m__10UU(c~0,cbl!156,da~0,di~DI,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> m__10UU(c~0,cbl!156,da~DA,di~0,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) fRate973() #Modifiers(L, Di10LU, L)
	r975: m__01UU(c~0,da~0,di~DI,grb2,l,r~0) -> m__01UU(c~0,da~DA,di~0,grb2,l,r~0) fRate974() #Modifiers(L, Di01UU, L)
	r976: m__01UU(c~0,da~0,di~DI,grb2!158,l,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> m__01UU(c~0,da~DA,di~0,grb2!158,l,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) fRate975() #Modifiers(L, Di01UG, L)
	r977: m__01UU(c~0,da~0,di~DI,grb2!158,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> m__01UU(c~0,da~DA,di~0,grb2!158,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) fRate976() #Modifiers(L, Di01UL, L)
	r978: m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) -> m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) fRate977() #Modifiers(L, Di11UU, L)
	r979: m__11UU(c~0,cbl!155,da~0,di~DI,grb2,grb2,l,r~0).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l,r~0).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) fRate978() #Modifiers(L, Di11CU, L)
	r980: m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) fRate979() #Modifiers(L, Di11LU, L)
	r981: m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) fRate980() #Modifiers(L, Di11UG, L)
	r982: Di11UL() -> Da11UL() fRate981() #Modifiers(L, Di11UL, L)
	r983: Di11CG() -> Da11CG() fRate982() #Modifiers(L, Di11CG, L)
	r984: m__11C(_11CU~0,c~C,c2~0,da~0,di~DI,l,lu~0,r~0) -> m__11C(_11CU~0,c~C,c2~0,da~DA,di~0,l,lu~0,r~0) fRate983() #Modifiers(L, Di11CC, L)
	r985: m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) fRate984() #Modifiers(L, Di11LG, L)
	r986: m__02UU(c~0,da~0,di~DI,grb2,l,r~0) -> m__02UU(c~0,da~DA,di~0,grb2,l,r~0) fRate985() #Modifiers(L, Di02UU, L)
	r987: m__02UU(c~0,da~0,di~DI,grb2!159,l,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> m__02UU(c~0,da~DA,di~0,grb2!159,l,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) fRate986() #Modifiers(L, Di02UG, L)
	r988: m__02UU(c~0,da~0,di~DI,grb2!159,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> m__02UU(c~0,da~DA,di~0,grb2!159,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) fRate987() #Modifiers(L, Di02UL, L)
	r989: m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) -> m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) fRate988() #Modifiers(L, Di12UU, L)
	r990: m__12UU(c~0,cbl!160,da~0,di~DI,grb2,grb2,l,r~0).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2,grb2,l,r~0).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) fRate989() #Modifiers(L, Di12CU, L)
	r991: m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) fRate990() #Modifiers(L, Di12LU, L)
	r992: m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) fRate991() #Modifiers(L, Di12UG, L)
	r993: Di12UL() -> Da12UL() fRate992() #Modifiers(L, Di12UL, L)
	r994: Di12CG() -> Da12CG() fRate993() #Modifiers(L, Di12CG, L)
	r995: m__12C(_12CU~0,c~C,c2~0,da~0,di~DI,l,lu~0,r~0) -> m__12C(_12CU~0,c~C,c2~0,da~DA,di~0,l,lu~0,r~0) fRate994() #Modifiers(L, Di12CC, L)
	r996: m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) fRate995() #Modifiers(L, Di12LG, L)
	r997: m__00UU(c~0,da~0,di~DI,l,r~0) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~0,di~DI,l!163,r~0) kb #Modifiers(Di00UU, L)
	r998: m__10UU(c~0,cbl,da~0,di~DI,l,r~0) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~0,di~DI,l!162,r~0) kb #Modifiers(Di10UU, L)
	r999: m__10UU(c~0,cbl!156,da~0,di~DI,l,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~DI,l!162,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) kb #Modifiers(Di10CU, L)
	r1000: m__10UU(c~0,cbl!156,da~0,di~DI,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~DI,l!162,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) kb #Modifiers(Di10LU, L)
	r1001: m__01UU(c~0,da~0,di~DI,grb2,l,r~0) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2,l!164,r~0) kb #Modifiers(Di01UU, L)
	r1002: m__01UU(c~0,da~0,di~DI,grb2!158,l,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2!158,l!164,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kb #Modifiers(Di01UG, L)
	r1003: m__01UU(c~0,da~0,di~DI,grb2!158,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2!158,l!164,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kb #Modifiers(Di01UL, L)
	r1004: m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) kb #Modifiers(Di11UU, L)
	r1005: m__11UU(c~0,cbl!155,da~0,di~DI,grb2,grb2,l,r~0).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) kb #Modifiers(Di11CU, L)
	r1006: m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) kb #Modifiers(Di11LU, L)
	r1007: m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kb #Modifiers(Di11UG, L)
	r1008: Di11UL() + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> DiL11UL() kb #Modifiers(Di11UL, L)
	r1009: Di11CG() + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> DiL11CG() kb #Modifiers(Di11CG, L)
	r1010: m__11C(_11CU~0,c~C,c2~0,da~0,di~DI,l,lu~0,r~0) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__11C(_11CU~0,c~C,c2~0,da~0,di~DI,l!169,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) kb #Modifiers(Di11CC, L)
	r1011: m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2!171,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) kb #Modifiers(Di11LG, L)
	r1012: m__02UU(c~0,da~0,di~DI,grb2,l,r~0) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2,l!166,r~0) kb #Modifiers(Di02UU, L)
	r1013: m__02UU(c~0,da~0,di~DI,grb2!159,l,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2!159,l!166,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) kb #Modifiers(Di02UG, L)
	r1014: m__02UU(c~0,da~0,di~DI,grb2!159,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2!159,l!166,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) kb #Modifiers(Di02UL, L)
	r1015: m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) kb #Modifiers(Di12UU, L)
	r1016: m__12UU(c~0,cbl!160,da~0,di~DI,grb2,grb2,l,r~0).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) kb #Modifiers(Di12CU, L)
	r1017: m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) kb #Modifiers(Di12LU, L)
	r1018: m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) kb #Modifiers(Di12UG, L)
	r1019: Di12UL() + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> DiL12UL() kb #Modifiers(Di12UL, L)
	r1020: Di12CG() + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> DiL12CG() kb #Modifiers(Di12CG, L)
	r1021: m__12C(_12CU~0,c~C,c2~0,da~0,di~DI,l,lu~0,r~0) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__12C(_12CU~0,c~C,c2~0,da~0,di~DI,l!168,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) kb #Modifiers(Di12CC, L)
	r1022: m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2!170,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) kb #Modifiers(Di12LG, L)
	r1023: m__00UU(c~0,da~DA,di~0,l,r~0) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~DA,di~0,l!163,r~0) kb #Modifiers(Da00UU, L)
	r1024: m__10UU(c~0,cbl,da~DA,di~0,l,r~0) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~DA,di~0,l!162,r~0) kb #Modifiers(Da10UU, L)
	r1025: m__10UU(c~0,cbl!156,da~DA,di~0,l,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~DA,di~0,l!162,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) kb #Modifiers(Da10CU, L)
	r1026: m__10UU(c~0,cbl!156,da~DA,di~0,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~DA,di~0,l!162,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) kb #Modifiers(Da10LU, L)
	r1027: m__01UU(c~0,da~DA,di~0,grb2,l,r~0) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2,l!164,r~0) kb #Modifiers(Da01UU, L)
	r1028: m__01UU(c~0,da~DA,di~0,grb2!158,l,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2!158,l!164,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kb #Modifiers(Da01UG, L)
	r1029: m__01UU(c~0,da~DA,di~0,grb2!158,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2!158,l!164,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kb #Modifiers(Da01UL, L)
	r1030: m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) kb #Modifiers(Da11UU, L)
	r1031: m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l,r~0).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) kb #Modifiers(Da11CU, L)
	r1032: m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) kb #Modifiers(Da11LU, L)
	r1033: m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kb #Modifiers(Da11UG, L)
	r1034: Da11UL() + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> DaL11UL() kb #Modifiers(Da11UL, L)
	r1035: Da11CG() + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> DaL11CG() kb #Modifiers(Da11CG, L)
	r1036: m__11C(_11CU~0,c~C,c2~0,da~DA,di~0,l,lu~0,r~0) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__11C(_11CU~0,c~C,c2~0,da~DA,di~0,l!169,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) kb #Modifiers(Da11CC, L)
	r1037: m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2!171,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) kb #Modifiers(Da11LG, L)
	r1038: m__02UU(c~0,da~DA,di~0,grb2,l,r~0) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2,l!166,r~0) kb #Modifiers(Da02UU, L)
	r1039: m__02UU(c~0,da~DA,di~0,grb2!159,l,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2!159,l!166,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) kb #Modifiers(Da02UG, L)
	r1040: m__02UU(c~0,da~DA,di~0,grb2!159,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2!159,l!166,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) kb #Modifiers(Da02UL, L)
	r1041: m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) kb #Modifiers(Da12UU, L)
	r1042: m__12UU(c~0,cbl!160,da~DA,di~0,grb2,grb2,l,r~0).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) kb #Modifiers(Da12CU, L)
	r1043: m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) kb #Modifiers(Da12LU, L)
	r1044: m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) kb #Modifiers(Da12UG, L)
	r1045: Da12UL() + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> DaL12UL() kb #Modifiers(Da12UL, L)
	r1046: Da12CG() + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> DaL12CG() kb #Modifiers(Da12CG, L)
	r1047: m__12C(_12CU~0,c~C,c2~0,da~DA,di~0,l,lu~0,r~0) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__12C(_12CU~0,c~C,c2~0,da~DA,di~0,l!168,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) kb #Modifiers(Da12CC, L)
	r1048: m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2!170,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) kb #Modifiers(Da12LG, L)
	r1049: L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~0,di~DI,l!163,r~0) -> L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~DA,di~0,l!163,r~0) fRate1048() #Modifiers(L, DiL00UU, L)
	r1050: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~0,di~DI,l!162,r~0) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~DA,di~0,l!162,r~0) fRate1049() #Modifiers(L, DiL10UU, L)
	r1051: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~DI,l!162,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~DA,di~0,l!162,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) fRate1050() #Modifiers(L, DiL10CU, L)
	r1052: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~DI,l!162,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~DA,di~0,l!162,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) fRate1051() #Modifiers(L, DiL10LU, L)
	r1053: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2,l!164,r~0) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2,l!164,r~0) fRate1052() #Modifiers(L, DiL01UU, L)
	r1054: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2!158,l!164,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2!158,l!164,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) fRate1053() #Modifiers(L, DiL01UG, L)
	r1055: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2!158,l!164,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2!158,l!164,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) fRate1054() #Modifiers(L, DiL01UL, L)
	r1056: m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) fRate1055() #Modifiers(L, DiL11UU, L)
	r1057: m__11UU(c~0,cbl!155,da~0,di~DI,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) fRate1056() #Modifiers(L, DiL11CU, L)
	r1058: m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) fRate1057() #Modifiers(L, DiL11LU, L)
	r1059: m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) fRate1058() #Modifiers(L, DiL11UG, L)
	r1060: DiL11UL() -> DaL11UL() fRate1059() #Modifiers(L, DiL11UL, L)
	r1061: DiL11CG() -> DaL11CG() fRate1060() #Modifiers(L, DiL11CG, L)
	r1062: m__11C(_11CU~0,c~C,c2~0,da~0,di~DI,l!169,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) -> m__11C(_11CU~0,c~C,c2~0,da~DA,di~0,l!169,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) fRate1061() #Modifiers(L, DiL11CC, L)
	r1063: m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2!171,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2!171,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) fRate1062() #Modifiers(L, DiL11LG, L)
	r1064: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2,l!166,r~0) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2,l!166,r~0) fRate1063() #Modifiers(L, DiL02UU, L)
	r1065: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2!159,l!166,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2!159,l!166,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) fRate1064() #Modifiers(L, DiL02UG, L)
	r1066: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2!159,l!166,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2!159,l!166,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) fRate1065() #Modifiers(L, DiL02UL, L)
	r1067: m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) fRate1066() #Modifiers(L, DiL12UU, L)
	r1068: m__12UU(c~0,cbl!160,da~0,di~DI,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) fRate1067() #Modifiers(L, DiL12CU, L)
	r1069: m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) fRate1068() #Modifiers(L, DiL12LU, L)
	r1070: m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) fRate1069() #Modifiers(L, DiL12UG, L)
	r1071: DiL12UL() -> DaL12UL() fRate1070() #Modifiers(L, DiL12UL, L)
	r1072: DiL12CG() -> DaL12CG() fRate1071() #Modifiers(L, DiL12CG, L)
	r1073: m__12C(_12CU~0,c~C,c2~0,da~0,di~DI,l!168,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) -> m__12C(_12CU~0,c~C,c2~0,da~DA,di~0,l!168,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) fRate1072() #Modifiers(L, DiL12CC, L)
	r1074: m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2!170,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2!170,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) fRate1073() #Modifiers(L, DiL12LG, L)
	r1075: L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~0,di~0,l!163,r~R) -> m__00UU(c~0,da~0,di~0,l,r~R) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(RL00UU)
	r1076: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~0,di~0,l!162,r~R) -> m__10UU(c~0,cbl,da~0,di~0,l,r~R) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(RL10UU)
	r1077: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~0,l!162,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> m__10UU(c~0,cbl!156,da~0,di~0,l,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(RL10CU)
	r1078: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~0,l!162,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> m__10UU(c~0,cbl!156,da~0,di~0,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(RL10LU)
	r1079: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2,l!164,r~R) -> m__01UU(c~0,da~0,di~0,grb2,l,r~R) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(RL01UU)
	r1080: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2!158,l!164,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> m__01UU(c~0,da~0,di~0,grb2!158,l,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(RL01UG)
	r1081: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2!158,l!164,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> m__01UU(c~0,da~0,di~0,grb2!158,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(RL01UL)
	r1082: m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(RL11UU)
	r1083: m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(RL11CU)
	r1084: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(RL11LU)
	r1085: m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(RL11UG)
	r1086: RL11UL() -> R11UL() + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(RL11UL)
	r1087: RL11CG() -> R11CG() + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(RL11CG)
	r1088: m__11C(_11CU~0,c~C,c2~0,da~0,di~0,l!169,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) -> m__11C(_11CU~0,c~C,c2~0,da~0,di~0,l,lu~0,r~R) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(RL11CC)
	r1089: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2!171,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(RL11LG)
	r1090: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2,l!166,r~R) -> m__02UU(c~0,da~0,di~0,grb2,l,r~R) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(RL02UU)
	r1091: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2!159,l!166,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> m__02UU(c~0,da~0,di~0,grb2!159,l,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(RL02UG)
	r1092: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2!159,l!166,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> m__02UU(c~0,da~0,di~0,grb2!159,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(RL02UL)
	r1093: m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(RL12UU)
	r1094: m__12UU(c~0,cbl!160,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(RL12CU)
	r1095: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(RL12LU)
	r1096: m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(RL12UG)
	r1097: RL12UL() -> R12UL() + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(RL12UL)
	r1098: RL12CG() -> R12CG() + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(RL12CG)
	r1099: m__12C(_12CU~0,c~C,c2~0,da~0,di~0,l!168,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) -> m__12C(_12CU~0,c~C,c2~0,da~0,di~0,l,lu~0,r~R) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(RL12CC)
	r1100: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2!170,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(RL12LG)
	r1101: L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~C,da~0,di~0,l!163,r~R) -> m__00UU(c~C,da~0,di~0,l,r~R) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) k1u #Modifiers(RcL00UU)
	r1102: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~C,cbl,da~0,di~0,l!162,r~R) -> m__10UU(c~C,cbl,da~0,di~0,l,r~R) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) k1u #Modifiers(RcL10UU)
	r1103: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~C,cbl!156,da~0,di~0,l!162,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> m__10UU(c~C,cbl!156,da~0,di~0,l,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) k1u #Modifiers(RcL10CU)
	r1104: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~C,cbl!156,da~0,di~0,l!162,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> m__10UU(c~C,cbl!156,da~0,di~0,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) k1u #Modifiers(RcL10LU)
	r1105: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2,l!164,r~R) -> m__01UU(c~C,da~0,di~0,grb2,l,r~R) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) k1u #Modifiers(RcL01UU)
	r1106: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2!158,l!164,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> m__01UU(c~C,da~0,di~0,grb2!158,l,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) k1u #Modifiers(RcL01UG)
	r1107: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~C,da~0,di~0,grb2!158,l!164,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> m__01UU(c~C,da~0,di~0,grb2!158,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) k1u #Modifiers(RcL01UL)
	r1108: m__11UU(c~C,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> m__11UU(c~C,cbl,da~0,di~0,grb2,grb2,l,r~R) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) k1u #Modifiers(RcL11UU)
	r1109: m__11UU(c~C,cbl!155,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__11UU(c~C,cbl!155,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) k1u #Modifiers(RcL11CU)
	r1110: m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) k1u #Modifiers(RcL11LU)
	r1111: m__11UU(c~C,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__11UU(c~C,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) k1u #Modifiers(RcL11UG)
	r1112: RcL11UL() -> Rc11UL() + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) k1u #Modifiers(RcL11UL)
	r1113: RcL11CG() -> Rc11CG() + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) k1u #Modifiers(RcL11CG)
	r1114: m__11C(_11CU~0,c~C,c2~C,da~0,di~0,l!169,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) -> m__11C(_11CU~0,c~C,c2~C,da~0,di~0,l,lu~0,r~R) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) k1u #Modifiers(RcL11CC)
	r1115: m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2!171,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) -> m__11UU(c~C,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) k1u #Modifiers(RcL11LG)
	r1116: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2,l!166,r~R) -> m__02UU(c~C,da~0,di~0,grb2,l,r~R) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) k1u #Modifiers(RcL02UU)
	r1117: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2!159,l!166,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> m__02UU(c~C,da~0,di~0,grb2!159,l,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) k1u #Modifiers(RcL02UG)
	r1118: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~C,da~0,di~0,grb2!159,l!166,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> m__02UU(c~C,da~0,di~0,grb2!159,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) k1u #Modifiers(RcL02UL)
	r1119: m__12UU(c~C,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> m__12UU(c~C,cbl,da~0,di~0,grb2,grb2,l,r~R) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) k1u #Modifiers(RcL12UU)
	r1120: m__12UU(c~C,cbl!160,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__12UU(c~C,cbl!160,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) k1u #Modifiers(RcL12CU)
	r1121: m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) k1u #Modifiers(RcL12LU)
	r1122: m__12UU(c~C,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__12UU(c~C,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) k1u #Modifiers(RcL12UG)
	r1123: RcL12UL() -> Rc12UL() + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) k1u #Modifiers(RcL12UL)
	r1124: RcL12CG() -> Rc12CG() + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) k1u #Modifiers(RcL12CG)
	r1125: m__12C(_12CU~0,c~C,c2~C,da~0,di~0,l!168,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) -> m__12C(_12CU~0,c~C,c2~C,da~0,di~0,l,lu~0,r~R) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) k1u #Modifiers(RcL12CC)
	r1126: m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2!170,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) -> m__12UU(c~C,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) k1u #Modifiers(RcL12LG)
	r1127: L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~DA,di~0,l!163,r~0) -> L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~0,di~DI,l!163,r~0) ku #Modifiers(DaL00UU)
	r1128: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~DA,di~0,l!162,r~0) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~0,di~DI,l!162,r~0) ku #Modifiers(DaL10UU)
	r1129: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~DA,di~0,l!162,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~DI,l!162,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) ku #Modifiers(DaL10CU)
	r1130: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~DA,di~0,l!162,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~DI,l!162,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) ku #Modifiers(DaL10LU)
	r1131: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2,l!164,r~0) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2,l!164,r~0) ku #Modifiers(DaL01UU)
	r1132: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2!158,l!164,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2!158,l!164,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) ku #Modifiers(DaL01UG)
	r1133: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2!158,l!164,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2!158,l!164,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) ku #Modifiers(DaL01UL)
	r1134: m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) ku #Modifiers(DaL11UU)
	r1135: m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) ku #Modifiers(DaL11CU)
	r1136: m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) ku #Modifiers(DaL11LU)
	r1137: m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) ku #Modifiers(DaL11UG)
	r1138: DaL11UL() -> DiL11UL() ku #Modifiers(DaL11UL)
	r1139: DaL11CG() -> DiL11CG() ku #Modifiers(DaL11CG)
	r1140: m__11C(_11CU~0,c~C,c2~0,da~DA,di~0,l!169,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) -> m__11C(_11CU~0,c~C,c2~0,da~0,di~DI,l!169,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) ku #Modifiers(DaL11CC)
	r1141: m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2!171,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2!171,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) ku #Modifiers(DaL11LG)
	r1142: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2,l!166,r~0) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2,l!166,r~0) ku #Modifiers(DaL02UU)
	r1143: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2!159,l!166,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2!159,l!166,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) ku #Modifiers(DaL02UG)
	r1144: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2!159,l!166,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2!159,l!166,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) ku #Modifiers(DaL02UL)
	r1145: m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) ku #Modifiers(DaL12UU)
	r1146: m__12UU(c~0,cbl!160,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) ku #Modifiers(DaL12CU)
	r1147: m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) ku #Modifiers(DaL12LU)
	r1148: m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) ku #Modifiers(DaL12UG)
	r1149: DaL12UL() -> DiL12UL() ku #Modifiers(DaL12UL)
	r1150: DaL12CG() -> DiL12CG() ku #Modifiers(DaL12CG)
	r1151: m__12C(_12CU~0,c~C,c2~0,da~DA,di~0,l!168,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) -> m__12C(_12CU~0,c~C,c2~0,da~0,di~DI,l!168,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) ku #Modifiers(DaL12CC)
	r1152: m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2!170,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2!170,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) ku #Modifiers(DaL12LG)
	r1153: L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~DA,di~0,l!163,r~0) -> m__00UU(c~0,da~DA,di~0,l,r~0) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DaL00UU)
	r1154: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~DA,di~0,l!162,r~0) -> m__10UU(c~0,cbl,da~DA,di~0,l,r~0) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DaL10UU)
	r1155: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~DA,di~0,l!162,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> m__10UU(c~0,cbl!156,da~DA,di~0,l,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DaL10CU)
	r1156: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~DA,di~0,l!162,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> m__10UU(c~0,cbl!156,da~DA,di~0,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DaL10LU)
	r1157: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2,l!164,r~0) -> m__01UU(c~0,da~DA,di~0,grb2,l,r~0) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DaL01UU)
	r1158: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2!158,l!164,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> m__01UU(c~0,da~DA,di~0,grb2!158,l,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DaL01UG)
	r1159: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2!158,l!164,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> m__01UU(c~0,da~DA,di~0,grb2!158,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DaL01UL)
	r1160: m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DaL11UU)
	r1161: m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l,r~0).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DaL11CU)
	r1162: m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DaL11LU)
	r1163: m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DaL11UG)
	r1164: DaL11UL() -> Da11UL() + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DaL11UL)
	r1165: DaL11CG() -> Da11CG() + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DaL11CG)
	r1166: m__11C(_11CU~0,c~C,c2~0,da~DA,di~0,l!169,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) -> m__11C(_11CU~0,c~C,c2~0,da~DA,di~0,l,lu~0,r~0) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DaL11CC)
	r1167: m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2!171,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DaL11LG)
	r1168: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2,l!166,r~0) -> m__02UU(c~0,da~DA,di~0,grb2,l,r~0) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DaL02UU)
	r1169: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2!159,l!166,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> m__02UU(c~0,da~DA,di~0,grb2!159,l,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DaL02UG)
	r1170: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2!159,l!166,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> m__02UU(c~0,da~DA,di~0,grb2!159,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DaL02UL)
	r1171: m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DaL12UU)
	r1172: m__12UU(c~0,cbl!160,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2,grb2,l,r~0).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DaL12CU)
	r1173: m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DaL12LU)
	r1174: m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DaL12UG)
	r1175: DaL12UL() -> Da12UL() + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DaL12UL)
	r1176: DaL12CG() -> Da12CG() + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DaL12CG)
	r1177: m__12C(_12CU~0,c~C,c2~0,da~DA,di~0,l!168,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) -> m__12C(_12CU~0,c~C,c2~0,da~DA,di~0,l,lu~0,r~0) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DaL12CC)
	r1178: m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2!170,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DaL12LG)
	r1179: m__00UU(c~0,da~DA,di~0,l,r~0) -> m__00UU(c~0,da~0,di~DI,l,r~0) ku #Modifiers(Da00UU)
	r1180: m__10UU(c~0,cbl,da~DA,di~0,l,r~0) -> m__10UU(c~0,cbl,da~0,di~DI,l,r~0) ku #Modifiers(Da10UU)
	r1181: m__10UU(c~0,cbl!156,da~DA,di~0,l,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> m__10UU(c~0,cbl!156,da~0,di~DI,l,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) ku #Modifiers(Da10CU)
	r1182: m__10UU(c~0,cbl!156,da~DA,di~0,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> m__10UU(c~0,cbl!156,da~0,di~DI,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) ku #Modifiers(Da10LU)
	r1183: m__01UU(c~0,da~DA,di~0,grb2,l,r~0) -> m__01UU(c~0,da~0,di~DI,grb2,l,r~0) ku #Modifiers(Da01UU)
	r1184: m__01UU(c~0,da~DA,di~0,grb2!158,l,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> m__01UU(c~0,da~0,di~DI,grb2!158,l,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) ku #Modifiers(Da01UG)
	r1185: m__01UU(c~0,da~DA,di~0,grb2!158,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> m__01UU(c~0,da~0,di~DI,grb2!158,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) ku #Modifiers(Da01UL)
	r1186: m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) -> m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) ku #Modifiers(Da11UU)
	r1187: m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l,r~0).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2,grb2,l,r~0).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) ku #Modifiers(Da11CU)
	r1188: m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) ku #Modifiers(Da11LU)
	r1189: m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) ku #Modifiers(Da11UG)
	r1190: Da11UL() -> Di11UL() ku #Modifiers(Da11UL)
	r1191: Da11CG() -> Di11CG() ku #Modifiers(Da11CG)
	r1192: m__11C(_11CU~0,c~C,c2~0,da~DA,di~0,l,lu~0,r~0) -> m__11C(_11CU~0,c~C,c2~0,da~0,di~DI,l,lu~0,r~0) ku #Modifiers(Da11CC)
	r1193: m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) ku #Modifiers(Da11LG)
	r1194: m__02UU(c~0,da~DA,di~0,grb2,l,r~0) -> m__02UU(c~0,da~0,di~DI,grb2,l,r~0) ku #Modifiers(Da02UU)
	r1195: m__02UU(c~0,da~DA,di~0,grb2!159,l,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> m__02UU(c~0,da~0,di~DI,grb2!159,l,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) ku #Modifiers(Da02UG)
	r1196: m__02UU(c~0,da~DA,di~0,grb2!159,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> m__02UU(c~0,da~0,di~DI,grb2!159,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) ku #Modifiers(Da02UL)
	r1197: m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) -> m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) ku #Modifiers(Da12UU)
	r1198: m__12UU(c~0,cbl!160,da~DA,di~0,grb2,grb2,l,r~0).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2,grb2,l,r~0).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) ku #Modifiers(Da12CU)
	r1199: m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) ku #Modifiers(Da12LU)
	r1200: m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) ku #Modifiers(Da12UG)
	r1201: Da12UL() -> Di12UL() ku #Modifiers(Da12UL)
	r1202: Da12CG() -> Di12CG() ku #Modifiers(Da12CG)
	r1203: m__12C(_12CU~0,c~C,c2~0,da~DA,di~0,l,lu~0,r~0) -> m__12C(_12CU~0,c~C,c2~0,da~0,di~DI,l,lu~0,r~0) ku #Modifiers(Da12CC)
	r1204: m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) ku #Modifiers(Da12LG)
	r1205: L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~0,di~DI,l!163,r~0) -> m__00UU(c~0,da~0,di~DI,l,r~0) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DiL00UU)
	r1206: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~0,di~DI,l!162,r~0) -> m__10UU(c~0,cbl,da~0,di~DI,l,r~0) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DiL10UU)
	r1207: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~DI,l!162,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> m__10UU(c~0,cbl!156,da~0,di~DI,l,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DiL10CU)
	r1208: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~DI,l!162,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> m__10UU(c~0,cbl!156,da~0,di~DI,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DiL10LU)
	r1209: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2,l!164,r~0) -> m__01UU(c~0,da~0,di~DI,grb2,l,r~0) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DiL01UU)
	r1210: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2!158,l!164,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> m__01UU(c~0,da~0,di~DI,grb2!158,l,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DiL01UG)
	r1211: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2!158,l!164,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> m__01UU(c~0,da~0,di~DI,grb2!158,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DiL01UL)
	r1212: m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DiL11UU)
	r1213: m__11UU(c~0,cbl!155,da~0,di~DI,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2,grb2,l,r~0).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DiL11CU)
	r1214: m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DiL11LU)
	r1215: m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DiL11UG)
	r1216: DiL11UL() -> Di11UL() + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DiL11UL)
	r1217: DiL11CG() -> Di11CG() + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DiL11CG)
	r1218: m__11C(_11CU~0,c~C,c2~0,da~0,di~DI,l!169,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) -> m__11C(_11CU~0,c~C,c2~0,da~0,di~DI,l,lu~0,r~0) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DiL11CC)
	r1219: m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2!171,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DiL11LG)
	r1220: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2,l!166,r~0) -> m__02UU(c~0,da~0,di~DI,grb2,l,r~0) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DiL02UU)
	r1221: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2!159,l!166,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> m__02UU(c~0,da~0,di~DI,grb2!159,l,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DiL02UG)
	r1222: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2!159,l!166,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> m__02UU(c~0,da~0,di~DI,grb2!159,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DiL02UL)
	r1223: m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DiL12UU)
	r1224: m__12UU(c~0,cbl!160,da~0,di~DI,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2,grb2,l,r~0).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DiL12CU)
	r1225: m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DiL12LU)
	r1226: m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DiL12UG)
	r1227: DiL12UL() -> Di12UL() + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DiL12UL)
	r1228: DiL12CG() -> Di12CG() + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DiL12CG)
	r1229: m__12C(_12CU~0,c~C,c2~0,da~0,di~DI,l!168,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) -> m__12C(_12CU~0,c~C,c2~0,da~0,di~DI,l,lu~0,r~0) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DiL12CC)
	r1230: m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2!170,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) + L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu) ku #Modifiers(DiL12LG)
	r1231: m__00UU(c~0,da~0,di~0,l,r~R) -> m__00UU(c~0,da~0,di~DI,l,r~0) fRate1230() #Modifiers(SumM, R00UU, SumM)
	r1232: m__10UU(c~0,cbl,da~0,di~0,l,r~R) -> m__10UU(c~0,cbl,da~0,di~DI,l,r~0) fRate1231() #Modifiers(SumM, R10UU, SumM)
	r1233: m__10UU(c~0,cbl!156,da~0,di~0,l,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> m__10UU(c~0,cbl!156,da~0,di~DI,l,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) fRate1232() #Modifiers(SumM, R10CU, SumM)
	r1234: m__10UU(c~0,cbl!156,da~0,di~0,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> m__10UU(c~0,cbl!156,da~0,di~DI,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) fRate1233() #Modifiers(SumM, R10LU, SumM)
	r1235: m__01UU(c~0,da~0,di~0,grb2,l,r~R) -> m__01UU(c~0,da~0,di~DI,grb2,l,r~0) fRate1234() #Modifiers(SumM, R01UU, SumM)
	r1236: m__01UU(c~0,da~0,di~0,grb2!158,l,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> m__01UU(c~0,da~0,di~DI,grb2!158,l,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) fRate1235() #Modifiers(SumM, R01UG, SumM)
	r1237: m__01UU(c~0,da~0,di~0,grb2!158,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> m__01UU(c~0,da~0,di~DI,grb2!158,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) fRate1236() #Modifiers(SumM, R01UL, SumM)
	r1238: m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) -> m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) fRate1237() #Modifiers(SumM, R11UU, SumM)
	r1239: m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2,grb2,l,r~0).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) fRate1238() #Modifiers(SumM, R11CU, SumM)
	r1240: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) fRate1239() #Modifiers(SumM, R11LU, SumM)
	r1241: m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) fRate1240() #Modifiers(SumM, R11UG, SumM)
	r1242: R11UL() -> Di11UL() fRate1241() #Modifiers(SumM, R11UL, SumM)
	r1243: R11CG() -> Di11CG() fRate1242() #Modifiers(SumM, R11CG, SumM)
	r1244: m__11C(_11CU~0,c~C,c2~0,da~0,di~0,l,lu~0,r~R) -> m__11C(_11CU~0,c~C,c2~0,da~0,di~DI,l,lu~0,r~0) fRate1243() #Modifiers(SumM, R11CC, SumM)
	r1245: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) fRate1244() #Modifiers(SumM, R11LG, SumM)
	r1246: m__02UU(c~0,da~0,di~0,grb2,l,r~R) -> m__02UU(c~0,da~0,di~DI,grb2,l,r~0) fRate1245() #Modifiers(SumM, R02UU, SumM)
	r1247: m__02UU(c~0,da~0,di~0,grb2!159,l,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> m__02UU(c~0,da~0,di~DI,grb2!159,l,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) fRate1246() #Modifiers(SumM, R02UG, SumM)
	r1248: m__02UU(c~0,da~0,di~0,grb2!159,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> m__02UU(c~0,da~0,di~DI,grb2!159,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) fRate1247() #Modifiers(SumM, R02UL, SumM)
	r1249: m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) -> m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) fRate1248() #Modifiers(SumM, R12UU, SumM)
	r1250: m__12UU(c~0,cbl!160,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2,grb2,l,r~0).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) fRate1249() #Modifiers(SumM, R12CU, SumM)
	r1251: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) fRate1250() #Modifiers(SumM, R12LU, SumM)
	r1252: m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) fRate1251() #Modifiers(SumM, R12UG, SumM)
	r1253: R12UL() -> Di12UL() fRate1252() #Modifiers(SumM, R12UL, SumM)
	r1254: R12CG() -> Di12CG() fRate1253() #Modifiers(SumM, R12CG, SumM)
	r1255: m__12C(_12CU~0,c~C,c2~0,da~0,di~0,l,lu~0,r~R) -> m__12C(_12CU~0,c~C,c2~0,da~0,di~DI,l,lu~0,r~0) fRate1254() #Modifiers(SumM, R12CC, SumM)
	r1256: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) fRate1255() #Modifiers(SumM, R12LG, SumM)
	r1257: m__00UU(c~0,da~0,di~0,l,r~R) -> m__00UU(c~0,da~DA,di~0,l,r~0) fRate1256() #Modifiers(SumML, R00UU, SumML)
	r1258: m__10UU(c~0,cbl,da~0,di~0,l,r~R) -> m__10UU(c~0,cbl,da~DA,di~0,l,r~0) fRate1257() #Modifiers(SumML, R10UU, SumML)
	r1259: m__10UU(c~0,cbl!156,da~0,di~0,l,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> m__10UU(c~0,cbl!156,da~DA,di~0,l,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) fRate1258() #Modifiers(SumML, R10CU, SumML)
	r1260: m__10UU(c~0,cbl!156,da~0,di~0,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> m__10UU(c~0,cbl!156,da~DA,di~0,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) fRate1259() #Modifiers(SumML, R10LU, SumML)
	r1261: m__01UU(c~0,da~0,di~0,grb2,l,r~R) -> m__01UU(c~0,da~DA,di~0,grb2,l,r~0) fRate1260() #Modifiers(SumML, R01UU, SumML)
	r1262: m__01UU(c~0,da~0,di~0,grb2!158,l,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> m__01UU(c~0,da~DA,di~0,grb2!158,l,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) fRate1261() #Modifiers(SumML, R01UG, SumML)
	r1263: m__01UU(c~0,da~0,di~0,grb2!158,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> m__01UU(c~0,da~DA,di~0,grb2!158,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) fRate1262() #Modifiers(SumML, R01UL, SumML)
	r1264: m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) -> m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) fRate1263() #Modifiers(SumML, R11UU, SumML)
	r1265: m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l,r~0).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) fRate1264() #Modifiers(SumML, R11CU, SumML)
	r1266: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) fRate1265() #Modifiers(SumML, R11LU, SumML)
	r1267: m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) fRate1266() #Modifiers(SumML, R11UG, SumML)
	r1268: R11UL() -> Da11UL() fRate1267() #Modifiers(SumML, R11UL, SumML)
	r1269: R11CG() -> Da11CG() fRate1268() #Modifiers(SumML, R11CG, SumML)
	r1270: m__11C(_11CU~0,c~C,c2~0,da~0,di~0,l,lu~0,r~R) -> m__11C(_11CU~0,c~C,c2~0,da~DA,di~0,l,lu~0,r~0) fRate1269() #Modifiers(SumML, R11CC, SumML)
	r1271: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) fRate1270() #Modifiers(SumML, R11LG, SumML)
	r1272: m__02UU(c~0,da~0,di~0,grb2,l,r~R) -> m__02UU(c~0,da~DA,di~0,grb2,l,r~0) fRate1271() #Modifiers(SumML, R02UU, SumML)
	r1273: m__02UU(c~0,da~0,di~0,grb2!159,l,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> m__02UU(c~0,da~DA,di~0,grb2!159,l,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) fRate1272() #Modifiers(SumML, R02UG, SumML)
	r1274: m__02UU(c~0,da~0,di~0,grb2!159,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> m__02UU(c~0,da~DA,di~0,grb2!159,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) fRate1273() #Modifiers(SumML, R02UL, SumML)
	r1275: m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) -> m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) fRate1274() #Modifiers(SumML, R12UU, SumML)
	r1276: m__12UU(c~0,cbl!160,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2,grb2,l,r~0).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) fRate1275() #Modifiers(SumML, R12CU, SumML)
	r1277: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) fRate1276() #Modifiers(SumML, R12LU, SumML)
	r1278: m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) fRate1277() #Modifiers(SumML, R12UG, SumML)
	r1279: R12UL() -> Da12UL() fRate1278() #Modifiers(SumML, R12UL, SumML)
	r1280: R12CG() -> Da12CG() fRate1279() #Modifiers(SumML, R12CG, SumML)
	r1281: m__12C(_12CU~0,c~C,c2~0,da~0,di~0,l,lu~0,r~R) -> m__12C(_12CU~0,c~C,c2~0,da~DA,di~0,l,lu~0,r~0) fRate1280() #Modifiers(SumML, R12CC, SumML)
	r1282: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) fRate1281() #Modifiers(SumML, R12LG, SumML)
	r1283: L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~0,di~0,l!163,r~R) -> L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~0,di~DI,l!163,r~0) fRate1282() #Modifiers(SumM, RL00UU, SumM)
	r1284: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~0,di~0,l!162,r~R) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~0,di~DI,l!162,r~0) fRate1283() #Modifiers(SumM, RL10UU, SumM)
	r1285: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~0,l!162,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~DI,l!162,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) fRate1284() #Modifiers(SumM, RL10CU, SumM)
	r1286: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~0,l!162,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~DI,l!162,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) fRate1285() #Modifiers(SumM, RL10LU, SumM)
	r1287: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2,l!164,r~R) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2,l!164,r~0) fRate1286() #Modifiers(SumM, RL01UU, SumM)
	r1288: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2!158,l!164,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2!158,l!164,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) fRate1287() #Modifiers(SumM, RL01UG, SumM)
	r1289: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2!158,l!164,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2!158,l!164,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) fRate1288() #Modifiers(SumM, RL01UL, SumM)
	r1290: m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) fRate1289() #Modifiers(SumM, RL11UU, SumM)
	r1291: m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) fRate1290() #Modifiers(SumM, RL11CU, SumM)
	r1292: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) fRate1291() #Modifiers(SumM, RL11LU, SumM)
	r1293: m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) fRate1292() #Modifiers(SumM, RL11UG, SumM)
	r1294: RL11UL() -> DiL11UL() fRate1293() #Modifiers(SumM, RL11UL, SumM)
	r1295: RL11CG() -> DiL11CG() fRate1294() #Modifiers(SumM, RL11CG, SumM)
	r1296: m__11C(_11CU~0,c~C,c2~0,da~0,di~0,l!169,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) -> m__11C(_11CU~0,c~C,c2~0,da~0,di~DI,l!169,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) fRate1295() #Modifiers(SumM, RL11CC, SumM)
	r1297: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2!171,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2!171,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) fRate1296() #Modifiers(SumM, RL11LG, SumM)
	r1298: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2,l!166,r~R) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2,l!166,r~0) fRate1297() #Modifiers(SumM, RL02UU, SumM)
	r1299: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2!159,l!166,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2!159,l!166,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) fRate1298() #Modifiers(SumM, RL02UG, SumM)
	r1300: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2!159,l!166,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2!159,l!166,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) fRate1299() #Modifiers(SumM, RL02UL, SumM)
	r1301: m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) fRate1300() #Modifiers(SumM, RL12UU, SumM)
	r1302: m__12UU(c~0,cbl!160,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) fRate1301() #Modifiers(SumM, RL12CU, SumM)
	r1303: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) fRate1302() #Modifiers(SumM, RL12LU, SumM)
	r1304: m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) fRate1303() #Modifiers(SumM, RL12UG, SumM)
	r1305: RL12UL() -> DiL12UL() fRate1304() #Modifiers(SumM, RL12UL, SumM)
	r1306: RL12CG() -> DiL12CG() fRate1305() #Modifiers(SumM, RL12CG, SumM)
	r1307: m__12C(_12CU~0,c~C,c2~0,da~0,di~0,l!168,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) -> m__12C(_12CU~0,c~C,c2~0,da~0,di~DI,l!168,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) fRate1306() #Modifiers(SumM, RL12CC, SumM)
	r1308: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2!170,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2!170,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) fRate1307() #Modifiers(SumM, RL12LG, SumM)
	r1309: L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~0,di~0,l!163,r~R) -> L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~DA,di~0,l!163,r~0) fRate1308() #Modifiers(SumML, RL00UU, SumML)
	r1310: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~0,di~0,l!162,r~R) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~DA,di~0,l!162,r~0) fRate1309() #Modifiers(SumML, RL10UU, SumML)
	r1311: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~0,l!162,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~DA,di~0,l!162,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) fRate1310() #Modifiers(SumML, RL10CU, SumML)
	r1312: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~0,l!162,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~DA,di~0,l!162,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) fRate1311() #Modifiers(SumML, RL10LU, SumML)
	r1313: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2,l!164,r~R) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2,l!164,r~0) fRate1312() #Modifiers(SumML, RL01UU, SumML)
	r1314: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2!158,l!164,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2!158,l!164,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) fRate1313() #Modifiers(SumML, RL01UG, SumML)
	r1315: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2!158,l!164,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2!158,l!164,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) fRate1314() #Modifiers(SumML, RL01UL, SumML)
	r1316: m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) fRate1315() #Modifiers(SumML, RL11UU, SumML)
	r1317: m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) fRate1316() #Modifiers(SumML, RL11CU, SumML)
	r1318: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) fRate1317() #Modifiers(SumML, RL11LU, SumML)
	r1319: m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) fRate1318() #Modifiers(SumML, RL11UG, SumML)
	r1320: RL11UL() -> DaL11UL() fRate1319() #Modifiers(SumML, RL11UL, SumML)
	r1321: RL11CG() -> DaL11CG() fRate1320() #Modifiers(SumML, RL11CG, SumML)
	r1322: m__11C(_11CU~0,c~C,c2~0,da~0,di~0,l!169,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) -> m__11C(_11CU~0,c~C,c2~0,da~DA,di~0,l!169,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) fRate1321() #Modifiers(SumML, RL11CC, SumML)
	r1323: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2!171,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2!171,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) fRate1322() #Modifiers(SumML, RL11LG, SumML)
	r1324: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2,l!166,r~R) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2,l!166,r~0) fRate1323() #Modifiers(SumML, RL02UU, SumML)
	r1325: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2!159,l!166,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2!159,l!166,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) fRate1324() #Modifiers(SumML, RL02UG, SumML)
	r1326: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2!159,l!166,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2!159,l!166,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) fRate1325() #Modifiers(SumML, RL02UL, SumML)
	r1327: m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) fRate1326() #Modifiers(SumML, RL12UU, SumML)
	r1328: m__12UU(c~0,cbl!160,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) fRate1327() #Modifiers(SumML, RL12CU, SumML)
	r1329: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) fRate1328() #Modifiers(SumML, RL12LU, SumML)
	r1330: m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) fRate1329() #Modifiers(SumML, RL12UG, SumML)
	r1331: RL12UL() -> DaL12UL() fRate1330() #Modifiers(SumML, RL12UL, SumML)
	r1332: RL12CG() -> DaL12CG() fRate1331() #Modifiers(SumML, RL12CG, SumML)
	r1333: m__12C(_12CU~0,c~C,c2~0,da~0,di~0,l!168,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) -> m__12C(_12CU~0,c~C,c2~0,da~DA,di~0,l!168,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) fRate1332() #Modifiers(SumML, RL12CC, SumML)
	r1334: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2!170,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2!170,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) fRate1333() #Modifiers(SumML, RL12LG, SumML)
	r1335: m__00UU(c~0,da~0,di~DI,l,r~0) -> m__00UU(c~0,da~0,di~0,l,r~R) kuDIM #Modifiers(Di00UU)
	r1336: m__10UU(c~0,cbl,da~0,di~DI,l,r~0) -> m__10UU(c~0,cbl,da~0,di~0,l,r~R) kuDIM #Modifiers(Di10UU)
	r1337: m__10UU(c~0,cbl!156,da~0,di~DI,l,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> m__10UU(c~0,cbl!156,da~0,di~0,l,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) kuDIM #Modifiers(Di10CU)
	r1338: m__10UU(c~0,cbl!156,da~0,di~DI,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> m__10UU(c~0,cbl!156,da~0,di~0,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) kuDIM #Modifiers(Di10LU)
	r1339: m__01UU(c~0,da~0,di~DI,grb2,l,r~0) -> m__01UU(c~0,da~0,di~0,grb2,l,r~R) kuDIM #Modifiers(Di01UU)
	r1340: m__01UU(c~0,da~0,di~DI,grb2!158,l,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> m__01UU(c~0,da~0,di~0,grb2!158,l,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kuDIM #Modifiers(Di01UG)
	r1341: m__01UU(c~0,da~0,di~DI,grb2!158,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> m__01UU(c~0,da~0,di~0,grb2!158,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kuDIM #Modifiers(Di01UL)
	r1342: m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) -> m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) kuDIM #Modifiers(Di11UU)
	r1343: m__11UU(c~0,cbl!155,da~0,di~DI,grb2,grb2,l,r~0).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) kuDIM #Modifiers(Di11CU)
	r1344: m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) kuDIM #Modifiers(Di11LU)
	r1345: m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kuDIM #Modifiers(Di11UG)
	r1346: Di11UL() -> R11UL() kuDIM #Modifiers(Di11UL)
	r1347: Di11CG() -> R11CG() kuDIM #Modifiers(Di11CG)
	r1348: m__11C(_11CU~0,c~C,c2~0,da~0,di~DI,l,lu~0,r~0) -> m__11C(_11CU~0,c~C,c2~0,da~0,di~0,l,lu~0,r~R) kuDIM #Modifiers(Di11CC)
	r1349: m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) kuDIM #Modifiers(Di11LG)
	r1350: m__02UU(c~0,da~0,di~DI,grb2,l,r~0) -> m__02UU(c~0,da~0,di~0,grb2,l,r~R) kuDIM #Modifiers(Di02UU)
	r1351: m__02UU(c~0,da~0,di~DI,grb2!159,l,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> m__02UU(c~0,da~0,di~0,grb2!159,l,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) kuDIM #Modifiers(Di02UG)
	r1352: m__02UU(c~0,da~0,di~DI,grb2!159,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> m__02UU(c~0,da~0,di~0,grb2!159,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) kuDIM #Modifiers(Di02UL)
	r1353: m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) -> m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) kuDIM #Modifiers(Di12UU)
	r1354: m__12UU(c~0,cbl!160,da~0,di~DI,grb2,grb2,l,r~0).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) kuDIM #Modifiers(Di12CU)
	r1355: m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) kuDIM #Modifiers(Di12LU)
	r1356: m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) kuDIM #Modifiers(Di12UG)
	r1357: Di12UL() -> R12UL() kuDIM #Modifiers(Di12UL)
	r1358: Di12CG() -> R12CG() kuDIM #Modifiers(Di12CG)
	r1359: m__12C(_12CU~0,c~C,c2~0,da~0,di~DI,l,lu~0,r~0) -> m__12C(_12CU~0,c~C,c2~0,da~0,di~0,l,lu~0,r~R) kuDIM #Modifiers(Di12CC)
	r1360: m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) kuDIM #Modifiers(Di12LG)
	r1361: L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~0,di~DI,l!163,r~0) -> L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~0,di~0,l!163,r~R) kuDIM #Modifiers(DiL00UU)
	r1362: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~0,di~DI,l!162,r~0) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~0,di~0,l!162,r~R) kuDIM #Modifiers(DiL10UU)
	r1363: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~DI,l!162,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~0,l!162,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) kuDIM #Modifiers(DiL10CU)
	r1364: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~DI,l!162,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~0,l!162,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) kuDIM #Modifiers(DiL10LU)
	r1365: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2,l!164,r~0) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2,l!164,r~R) kuDIM #Modifiers(DiL01UU)
	r1366: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2!158,l!164,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2!158,l!164,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kuDIM #Modifiers(DiL01UG)
	r1367: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~DI,grb2!158,l!164,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2!158,l!164,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kuDIM #Modifiers(DiL01UL)
	r1368: m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) kuDIM #Modifiers(DiL11UU)
	r1369: m__11UU(c~0,cbl!155,da~0,di~DI,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) kuDIM #Modifiers(DiL11CU)
	r1370: m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) kuDIM #Modifiers(DiL11LU)
	r1371: m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kuDIM #Modifiers(DiL11UG)
	r1372: DiL11UL() -> RL11UL() kuDIM #Modifiers(DiL11UL)
	r1373: DiL11CG() -> RL11CG() kuDIM #Modifiers(DiL11CG)
	r1374: m__11C(_11CU~0,c~C,c2~0,da~0,di~DI,l!169,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) -> m__11C(_11CU~0,c~C,c2~0,da~0,di~0,l!169,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) kuDIM #Modifiers(DiL11CC)
	r1375: m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2!171,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2!171,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) kuDIM #Modifiers(DiL11LG)
	r1376: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2,l!166,r~0) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2,l!166,r~R) kuDIM #Modifiers(DiL02UU)
	r1377: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2!159,l!166,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2!159,l!166,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) kuDIM #Modifiers(DiL02UG)
	r1378: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~DI,grb2!159,l!166,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2!159,l!166,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) kuDIM #Modifiers(DiL02UL)
	r1379: m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) kuDIM #Modifiers(DiL12UU)
	r1380: m__12UU(c~0,cbl!160,da~0,di~DI,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) kuDIM #Modifiers(DiL12CU)
	r1381: m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) kuDIM #Modifiers(DiL12LU)
	r1382: m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) kuDIM #Modifiers(DiL12UG)
	r1383: DiL12UL() -> RL12UL() kuDIM #Modifiers(DiL12UL)
	r1384: DiL12CG() -> RL12CG() kuDIM #Modifiers(DiL12CG)
	r1385: m__12C(_12CU~0,c~C,c2~0,da~0,di~DI,l!168,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) -> m__12C(_12CU~0,c~C,c2~0,da~0,di~0,l!168,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) kuDIM #Modifiers(DiL12CC)
	r1386: m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2!170,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2!170,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) kuDIM #Modifiers(DiL12LG)
	r1387: m__00UU(c~0,da~DA,di~0,l,r~0) -> m__00UU(c~0,da~0,di~0,l,r~R) kuDIM #Modifiers(Da00UU)
	r1388: m__10UU(c~0,cbl,da~DA,di~0,l,r~0) -> m__10UU(c~0,cbl,da~0,di~0,l,r~R) kuDIM #Modifiers(Da10UU)
	r1389: m__10UU(c~0,cbl!156,da~DA,di~0,l,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> m__10UU(c~0,cbl!156,da~0,di~0,l,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) kuDIM #Modifiers(Da10CU)
	r1390: m__10UU(c~0,cbl!156,da~DA,di~0,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> m__10UU(c~0,cbl!156,da~0,di~0,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) kuDIM #Modifiers(Da10LU)
	r1391: m__01UU(c~0,da~DA,di~0,grb2,l,r~0) -> m__01UU(c~0,da~0,di~0,grb2,l,r~R) kuDIM #Modifiers(Da01UU)
	r1392: m__01UU(c~0,da~DA,di~0,grb2!158,l,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> m__01UU(c~0,da~0,di~0,grb2!158,l,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kuDIM #Modifiers(Da01UG)
	r1393: m__01UU(c~0,da~DA,di~0,grb2!158,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> m__01UU(c~0,da~0,di~0,grb2!158,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kuDIM #Modifiers(Da01UL)
	r1394: m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) -> m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) kuDIM #Modifiers(Da11UU)
	r1395: m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l,r~0).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) kuDIM #Modifiers(Da11CU)
	r1396: m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) kuDIM #Modifiers(Da11LU)
	r1397: m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kuDIM #Modifiers(Da11UG)
	r1398: Da11UL() -> R11UL() kuDIM #Modifiers(Da11UL)
	r1399: Da11CG() -> R11CG() kuDIM #Modifiers(Da11CG)
	r1400: m__11C(_11CU~0,c~C,c2~0,da~DA,di~0,l,lu~0,r~0) -> m__11C(_11CU~0,c~C,c2~0,da~0,di~0,l,lu~0,r~R) kuDIM #Modifiers(Da11CC)
	r1401: m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) kuDIM #Modifiers(Da11LG)
	r1402: m__02UU(c~0,da~DA,di~0,grb2,l,r~0) -> m__02UU(c~0,da~0,di~0,grb2,l,r~R) kuDIM #Modifiers(Da02UU)
	r1403: m__02UU(c~0,da~DA,di~0,grb2!159,l,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> m__02UU(c~0,da~0,di~0,grb2!159,l,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) kuDIM #Modifiers(Da02UG)
	r1404: m__02UU(c~0,da~DA,di~0,grb2!159,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> m__02UU(c~0,da~0,di~0,grb2!159,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) kuDIM #Modifiers(Da02UL)
	r1405: m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l,r~0) -> m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) kuDIM #Modifiers(Da12UU)
	r1406: m__12UU(c~0,cbl!160,da~DA,di~0,grb2,grb2,l,r~0).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) kuDIM #Modifiers(Da12CU)
	r1407: m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) kuDIM #Modifiers(Da12LU)
	r1408: m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) kuDIM #Modifiers(Da12UG)
	r1409: Da12UL() -> R12UL() kuDIM #Modifiers(Da12UL)
	r1410: Da12CG() -> R12CG() kuDIM #Modifiers(Da12CG)
	r1411: m__12C(_12CU~0,c~C,c2~0,da~DA,di~0,l,lu~0,r~0) -> m__12C(_12CU~0,c~C,c2~0,da~0,di~0,l,lu~0,r~R) kuDIM #Modifiers(Da12CC)
	r1412: m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) kuDIM #Modifiers(Da12LG)
	r1413: L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~DA,di~0,l!163,r~0) -> L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~0,di~0,l!163,r~R) kuDIM #Modifiers(DaL00UU)
	r1414: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~DA,di~0,l!162,r~0) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~0,di~0,l!162,r~R) kuDIM #Modifiers(DaL10UU)
	r1415: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~DA,di~0,l!162,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~0,l!162,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) kuDIM #Modifiers(DaL10CU)
	r1416: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~DA,di~0,l!162,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~0,l!162,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) kuDIM #Modifiers(DaL10LU)
	r1417: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2,l!164,r~0) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2,l!164,r~R) kuDIM #Modifiers(DaL01UU)
	r1418: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2!158,l!164,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2!158,l!164,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) kuDIM #Modifiers(DaL01UG)
	r1419: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2!158,l!164,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2!158,l!164,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) kuDIM #Modifiers(DaL01UL)
	r1420: m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) kuDIM #Modifiers(DaL11UU)
	r1421: m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) kuDIM #Modifiers(DaL11CU)
	r1422: m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) kuDIM #Modifiers(DaL11LU)
	r1423: m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) kuDIM #Modifiers(DaL11UG)
	r1424: DaL11UL() -> RL11UL() kuDIM #Modifiers(DaL11UL)
	r1425: DaL11CG() -> RL11CG() kuDIM #Modifiers(DaL11CG)
	r1426: m__11C(_11CU~0,c~C,c2~0,da~DA,di~0,l!169,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) -> m__11C(_11CU~0,c~C,c2~0,da~0,di~0,l!169,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) kuDIM #Modifiers(DaL11CC)
	r1427: m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2!171,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) -> m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2!171,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) kuDIM #Modifiers(DaL11LG)
	r1428: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2,l!166,r~0) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2,l!166,r~R) kuDIM #Modifiers(DaL02UU)
	r1429: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2!159,l!166,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2!159,l!166,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) kuDIM #Modifiers(DaL02UG)
	r1430: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2!159,l!166,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2!159,l!166,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) kuDIM #Modifiers(DaL02UL)
	r1431: m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) kuDIM #Modifiers(DaL12UU)
	r1432: m__12UU(c~0,cbl!160,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) kuDIM #Modifiers(DaL12CU)
	r1433: m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) kuDIM #Modifiers(DaL12LU)
	r1434: m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) kuDIM #Modifiers(DaL12UG)
	r1435: DaL12UL() -> RL12UL() kuDIM #Modifiers(DaL12UL)
	r1436: DaL12CG() -> RL12CG() kuDIM #Modifiers(DaL12CG)
	r1437: m__12C(_12CU~0,c~C,c2~0,da~DA,di~0,l!168,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) -> m__12C(_12CU~0,c~C,c2~0,da~0,di~0,l!168,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) kuDIM #Modifiers(DaL12CC)
	r1438: m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2!170,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) -> m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2!170,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) kuDIM #Modifiers(DaL12LG)
	r1439: m__00UU(c~0,da~0,di~0,l,r~R) -> m__00UU(c~0,da~0,di~DI,l,r~0) fRate1438() #Modifiers(R00UU)
	r1440: m__10UU(c~0,cbl,da~0,di~0,l,r~R) -> m__10UU(c~0,cbl,da~0,di~DI,l,r~0) fRate1439() #Modifiers(R10UU)
	r1441: m__10UU(c~0,cbl!156,da~0,di~0,l,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> m__10UU(c~0,cbl!156,da~0,di~DI,l,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) fRate1440() #Modifiers(R10CU)
	r1442: m__10UU(c~0,cbl!156,da~0,di~0,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> m__10UU(c~0,cbl!156,da~0,di~DI,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) fRate1441() #Modifiers(R10LU)
	r1443: m__01UU(c~0,da~0,di~0,grb2,l,r~R) -> m__01UU(c~0,da~0,di~DI,grb2,l,r~0) fRate1442() #Modifiers(R01UU)
	r1444: m__01UU(c~0,da~0,di~0,grb2!158,l,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> m__01UU(c~0,da~0,di~DI,grb2!158,l,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) fRate1443() #Modifiers(R01UG)
	r1445: m__01UU(c~0,da~0,di~0,grb2!158,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> m__01UU(c~0,da~0,di~DI,grb2!158,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) fRate1444() #Modifiers(R01UL)
	r1446: m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) -> m__11UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) fRate1445() #Modifiers(R11UU)
	r1447: m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2,grb2,l,r~0).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) fRate1446() #Modifiers(R11CU)
	r1448: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) fRate1447() #Modifiers(R11LU)
	r1449: m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__11UU(c~0,cbl,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) fRate1448() #Modifiers(R11UG)
	r1450: R11UL() -> Di11UL() fRate1449() #Modifiers(R11UL)
	r1451: R11CG() -> Di11CG() fRate1450() #Modifiers(R11CG)
	r1452: m__11C(_11CU~0,c~C,c2~0,da~0,di~0,l,lu~0,r~R) -> m__11C(_11CU~0,c~C,c2~0,da~0,di~DI,l,lu~0,r~0) fRate1451() #Modifiers(R11CC)
	r1453: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> m__11UU(c~0,cbl!155,da~0,di~DI,grb2!157,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) fRate1452() #Modifiers(R11LG)
	r1454: m__02UU(c~0,da~0,di~0,grb2,l,r~R) -> m__02UU(c~0,da~0,di~DI,grb2,l,r~0) fRate1453() #Modifiers(R02UU)
	r1455: m__02UU(c~0,da~0,di~0,grb2!159,l,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> m__02UU(c~0,da~0,di~DI,grb2!159,l,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) fRate1454() #Modifiers(R02UG)
	r1456: m__02UU(c~0,da~0,di~0,grb2!159,l,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> m__02UU(c~0,da~0,di~DI,grb2!159,l,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) fRate1455() #Modifiers(R02UL)
	r1457: m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l,r~R) -> m__12UU(c~0,cbl,da~0,di~DI,grb2,grb2,l,r~0) fRate1456() #Modifiers(R12UU)
	r1458: m__12UU(c~0,cbl!160,da~0,di~0,grb2,grb2,l,r~R).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2,grb2,l,r~0).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) fRate1457() #Modifiers(R12CU)
	r1459: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) fRate1458() #Modifiers(R12LU)
	r1460: m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__12UU(c~0,cbl,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) fRate1459() #Modifiers(R12UG)
	r1461: R12UL() -> Di12UL() fRate1460() #Modifiers(R12UL)
	r1462: R12CG() -> Di12CG() fRate1461() #Modifiers(R12CG)
	r1463: m__12C(_12CU~0,c~C,c2~0,da~0,di~0,l,lu~0,r~R) -> m__12C(_12CU~0,c~C,c2~0,da~0,di~DI,l,lu~0,r~0) fRate1462() #Modifiers(R12CC)
	r1464: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l,r~R).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) -> m__12UU(c~0,cbl!160,da~0,di~DI,grb2!161,grb2,l,r~0).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2!154).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!154) fRate1463() #Modifiers(R12LG)
	r1465: L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~0,di~0,l!163,r~R) -> L(_00uu!163,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__00UU(c~0,da~DA,di~0,l!163,r~0) fRate1464() #Modifiers(RL00UU)
	r1466: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~0,di~0,l!162,r~R) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl,da~DA,di~0,l!162,r~0) fRate1465() #Modifiers(RL10UU)
	r1467: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~0,l!162,r~R).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~DA,di~0,l!162,r~0).Cbl(_10uu!156,_11uu,_12uu,grb2,grb2) fRate1466() #Modifiers(RL10CU)
	r1468: L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~0,di~0,l!162,r~R).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) -> L(_00uu,_01uu,_02uu,_10uu!162,_11c,_11uu,_12c,_12uu).m__10UU(c~0,cbl!156,da~DA,di~0,l!162,r~0).Grb2(_01uu,_02uu,_11uu,_12uu,cbl!151).Cbl(_10uu!156,_11uu,_12uu,grb2!151,grb2) fRate1467() #Modifiers(RL10LU)
	r1469: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2,l!164,r~R) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2,l!164,r~0) fRate1468() #Modifiers(RL01UU)
	r1470: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2!158,l!164,r~R).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2!158,l!164,r~0).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl) fRate1469() #Modifiers(RL01UG)
	r1471: L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~0,di~0,grb2!158,l!164,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) -> L(_00uu,_01uu!164,_02uu,_10uu,_11c,_11uu,_12c,_12uu).m__01UU(c~0,da~DA,di~0,grb2!158,l!164,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu!158,_02uu,_11uu,_12uu,cbl!151) fRate1470() #Modifiers(RL01UL)
	r1472: m__11UU(c~0,cbl,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) -> m__11UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu) fRate1471() #Modifiers(RL11UU)
	r1473: m__11UU(c~0,cbl!155,da~0,di~0,grb2,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Cbl(_10uu,_11uu!155,_12uu,grb2,grb2) fRate1472() #Modifiers(RL11CU)
	r1474: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2) fRate1473() #Modifiers(RL11LU)
	r1475: m__11UU(c~0,cbl,da~0,di~0,grb2!157,grb2,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) -> m__11UU(c~0,cbl,da~DA,di~0,grb2!157,grb2,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl) fRate1474() #Modifiers(RL11UG)
	r1476: RL11UL() -> DaL11UL() fRate1475() #Modifiers(RL11UL)
	r1477: RL11CG() -> DaL11CG() fRate1476() #Modifiers(RL11CG)
	r1478: m__11C(_11CU~0,c~C,c2~0,da~0,di~0,l!169,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) -> m__11C(_11CU~0,c~C,c2~0,da~DA,di~0,l!169,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c!169,_11uu,_12c,_12uu) fRate1477() #Modifiers(RL11CC)
	r1479: m__11UU(c~0,cbl!155,da~0,di~0,grb2!157,grb2!171,l!165,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) -> m__11UU(c~0,cbl!155,da~DA,di~0,grb2!157,grb2!171,l!165,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu!165,_12c,_12uu).Grb2(_01uu,_02uu,_11uu!157,_12uu,cbl!151).Cbl(_10uu,_11uu!155,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu!171,_12uu,cbl) fRate1478() #Modifiers(RL11LG)
	r1480: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2,l!166,r~R) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2,l!166,r~0) fRate1479() #Modifiers(RL02UU)
	r1481: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2!159,l!166,r~R).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2!159,l!166,r~0).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl) fRate1480() #Modifiers(RL02UG)
	r1482: L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~0,di~0,grb2!159,l!166,r~R).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) -> L(_00uu,_01uu,_02uu!166,_10uu,_11c,_11uu,_12c,_12uu).m__02UU(c~0,da~DA,di~0,grb2!159,l!166,r~0).Cbl(_10uu,_11uu,_12uu,grb2!151,grb2).Grb2(_01uu,_02uu!159,_11uu,_12uu,cbl!151) fRate1481() #Modifiers(RL02UL)
	r1483: m__12UU(c~0,cbl,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) -> m__12UU(c~0,cbl,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167) fRate1482() #Modifiers(RL12UU)
	r1484: m__12UU(c~0,cbl!160,da~0,di~0,grb2,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Cbl(_10uu,_11uu,_12uu!160,grb2,grb2) fRate1483() #Modifiers(RL12CU)
	r1485: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2) fRate1484() #Modifiers(RL12LU)
	r1486: m__12UU(c~0,cbl,da~0,di~0,grb2!161,grb2,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) -> m__12UU(c~0,cbl,da~DA,di~0,grb2!161,grb2,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl) fRate1485() #Modifiers(RL12UG)
	r1487: RL12UL() -> DaL12UL() fRate1486() #Modifiers(RL12UL)
	r1488: RL12CG() -> DaL12CG() fRate1487() #Modifiers(RL12CG)
	r1489: m__12C(_12CU~0,c~C,c2~0,da~0,di~0,l!168,lu~0,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) -> m__12C(_12CU~0,c~C,c2~0,da~DA,di~0,l!168,lu~0,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c!168,_12uu) fRate1488() #Modifiers(RL12CC)
	r1490: m__12UU(c~0,cbl!160,da~0,di~0,grb2!161,grb2!170,l!167,r~R).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) -> m__12UU(c~0,cbl!160,da~DA,di~0,grb2!161,grb2!170,l!167,r~0).L(_00uu,_01uu,_02uu,_10uu,_11c,_11uu,_12c,_12uu!167).Grb2(_01uu,_02uu,_11uu,_12uu!161,cbl!151).Cbl(_10uu,_11uu,_12uu!160,grb2!151,grb2).Grb2(_01uu,_02uu,_11uu,_12uu!170,cbl) fRate1489() #Modifiers(RL12LG)
end reaction rules
end model
