###
#@BQB_IS:['http://identifiers.org/biomodels.db/MODEL1508180000', 'http://identifiers.org/biomodels.db/BIOMD0000000596']
#@BQB_OCCURS_IN:['http://identifiers.org/bto/BTO:0000141']
#@BQB_HAS_PROPERTY:['http://identifiers.org/go/GO:0044403', 'http://identifiers.org/go/GO:0045087', 'http://identifiers.org/mamo/MAMO_0000046', 'http://identifiers.org/go/GO:0009617', 'http://identifiers.org/doid/DOID:3686']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/10090', 'http://identifiers.org/taxonomy/210']
#@BQB_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/26367386']
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1508180000', 'http://identifiers.org/biomodels.db/BIOMD0000000596']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 15 molecules and 36 reactions. The translated model has 15 molecules and 36 rules'
###
begin model
begin parameters
	n 1.0 #units:unit_0
	r1_shalve 0.001675
	r1_vmax 0.002118
	r2_k1 0.001235
	r3_k1 0.010377
	r4_ka 1.167640
	r4_ki 0.047791
	r5_k1 0.075070
	r6_shalve 0.004050
	r6_vmax 0.096005
	r7_k1 0.006080
	r8_k1 0.005930
	r9_shalve 0.001550
	r9_vmax 0.002838
	r10_k 6.477540
	r10_r 0.023126
	r11_k 0.004577
	r12_ka 0.423130
	r12_ki 0.008882
	r13_shalve 1.884620
	r13_vmax 0.634738
	r14_shalve 0.001431
	r14_vmax 0.011817
	r15_k1 0.001038
	r16_ka 0.007478
	r16_ki 0.033497
	r17_k1 0.001592
	r18_shalve 1.443580
	r18_vmax 0.006217
	r19_shalve 9.649900
	r19_vmax 0.098006
	r20_shalve 44.767400
	r20_vmax 0.301374
	r21_k1 0.004789
	r22_shalve 49.928800
	r22_vmax 0.489838
	r23_k1 0.005239
	r24_shalve 0.001785
	r24_vmax 0.006623
	r25_k1 0.001226
	r26_k 0.000010
	r27_ka 0.739178
	r27_ki 0.088128
	r28_shalve 0.798454
	r28_vmax 0.020516
	r29_k1 0.008304
	r30_shalve 3.083540
	r30_vmax 0.090278
	r31_k1 0.032462
	r32_ka 12.202800
	r32_ki 0.048068
	r33_k1 0.036763
	r34_shalve 0.003976
	r34_vmax 0.046393
	r35_k1 0.002228
	r36_k 0.000150
end parameters
begin molecule types
	#^ bqbiol:isVersionOf uniprot:Q9Y4K3
	TRAF6()
	#^ bqbiol:isVersionOf uniprot:Q9Y239
	NOD1()
	RIG()
	#^ bqbiol:hasVersion uniprot:Q14653, uniprot:Q92985
	IRF()
	#^ bqbiol:isVersionOf ncit:C17380
	NFkB()
	#^ bqbiol:isVersionOf ncit:C17207
	TFi()
	X()
	#^ bqbiol:isVersionOf ncit:C20464
	CytoL()
	#^ bqbiol:isVersionOf uniprot:Q99836
	MyD88()
	#^ bqbiol:isVersionOf ncit:C20493
	IFN()
	#^ bqbiol:isVersionOf ncit:C14289
	HP()
	#^ bqbiol:isVersionOf uniprot:Q86UT6
	NLRX1()
	#^ bqbiol:isVersionOf ncim:C20464
	CytoE()
	MAVS()
	#^ bqbiol:isVersionOf ncit:C17207
	TFa()
end molecule types
begin seed species
	HP() 2.6496800000000005e+21 # (4.4 * 0.001)mol/L * 6.022e23/mol *1.0L #HP #HP
	NLRX1() 5.4198000000000007e+20 #original 0.9substance/L  #NLRX1 #NLRX1
	CytoL() 6.022e+20 #original 1.0substance/L  #CytoL #CytoL
	MyD88() 5.4198000000000007e+20 #original 0.9substance/L  #MyD88 #MyD88
	TRAF6() 5.4198000000000007e+20 #original 0.9substance/L  #TRAF6 #TRAF6
	NFkB() 5.4198000000000007e+20 #original 0.9substance/L  #NFkB #NFkB
	IFN() 6.022e+20 #original 1.0substance/L  #IFN #IFN
	NOD1() 5.4198000000000007e+20 #original 0.9substance/L  #NOD1 #NOD1
	RIG() 5.4198000000000007e+20 #original 0.9substance/L  #RIG #RIG
	MAVS() 3.6132e+20 #original 0.6substance/L  #MAVS #MAVS
	IRF() 6.022e+20 #original 1.0substance/L  #IRF #IRF
	TFa() 6.022e+20 #original 1.0substance/L  #TFa #TFa
	CytoE() 6.022e+20 #original 1.0substance/L  #CytoE #CytoE
	TFi() 6.022e+20 #original 1.0substance/L  #TFi #TFi
	X() 6.022e+20 #original 1.0substance/L  #X #X
end seed species
begin observables
	Species HP HP() #HP
	Species NLRX1 NLRX1() #NLRX1
	Species CytoL CytoL() #CytoL
	Species MyD88 MyD88() #MyD88
	Species TRAF6 TRAF6() #TRAF6
	Species NFkB NFkB() #NFkB
	Species IFN IFN() #IFN
	Species NOD1 NOD1() #NOD1
	Species RIG RIG() #RIG
	Species MAVS MAVS() #MAVS
	Species IRF IRF() #IRF
	Species TFa TFa() #TFa
	Species CytoE CytoE() #CytoE
	Species TFi TFi() #TFi
	Species X X() #X
end observables
begin functions
	fRate0() = 0.00211822*HP^n/(0.00167454^n + HP^n)
	fRate3() = 1.16764*TRAF6/((20.9243542744271*NLRX1)^n + 1.0)
	fRate5() = 0.096005*NFkB^n/(0.00405^n + NFkB^n)
	fRate8() = 0.00283798*CytoL^n/(0.00154977^n + CytoL^n)
	fRate9() = 0.0231262*HP
	fRate9m() = 0.00357021338347583*HP
	fRate10() = 0.002288485*CytoL
	fRate11() = 0.42313*TFa/((112.58725512272*TFi)^n + 1.0)
	fRate12() = 0.634738*NOD1^n/(1.88462^n + NOD1^n)
	fRate13() = 0.0118174*HP^n/(0.0014314^n + HP^n)
	fRate15() = 0.00747772*RIG/((29.8535088321606*NLRX1)^n + 1.0)
	fRate17() = 0.0062174*MAVS^n/(1.44358^n + MAVS^n)
	fRate18() = 0.0980063*NOD1^n/(9.6499^n + NOD1^n)
	fRate19() = 0.301374*IFN^n/(44.7674^n + IFN^n)
	fRate21() = 0.489838*IRF^n/(49.9288^n + IRF^n)
	fRate23() = 0.0066234*HP^n/(0.00178531^n + HP^n)
	fRate25() = 5.0e-6*IFN
	fRate26() = 0.739178*MyD88/((11.3470670668399*X)^n + 1.0)
	fRate27() = 0.0205163*CytoL^n/(0.798454^n + CytoL^n)
	fRate29() = 0.0902778*CytoE^n/(3.08354^n + CytoE^n)
	fRate31() = 12.2028*NFkB/((20.8037313572562*X)^n + 1.0)
	fRate33() = 0.0463933*NFkB^n/(0.003976^n + NFkB^n)
	fRate35() = 7.5e-5*CytoE
end functions
begin reaction rules
	MyD88_a_HP: 0  -> MyD88() fRate0() #Modifiers(HP)
	MyD88_d: MyD88() -> 0  r2_k1 #Modifiers(MyD88)
	TRAF_d: TRAF6() -> 0  r3_k1 #Modifiers(TRAF6)
	NFkB_a1: 0  -> NFkB() fRate3() #Modifiers(NLRX1, TRAF6)
	NFkB_d: NFkB() -> 0  r5_k1 #Modifiers(NFkB)
	CytoL_a: 0  -> CytoL() fRate5() #Modifiers(NFkB)
	CytoL_d: CytoL() -> 0  r7_k1 #Modifiers(CytoL)
	NLRX1_d: NLRX1() -> 0  r8_k1 #Modifiers(NLRX1)
	MyD88_a: 0  -> MyD88() fRate8() #Modifiers(CytoL)
	HP_a: 0  <-> HP() fRate9(),fRate9m() #Modifiers(HP)
	HP_CytoL_reactants_0: 0  -> HP() -1*(fRate10()) #Modifiers(CytoL)
	NLRX1_TF: 0  -> NLRX1() fRate11() #Modifiers(TFi, TFa)
	NFkB_a2: 0  -> NFkB() fRate12() #Modifiers(NOD1)
	RIG_a_HP: 0  -> RIG() fRate13() #Modifiers(HP)
	RIG_d: RIG() -> 0  r15_k1 #Modifiers(RIG)
	MAVS_a: 0  -> MAVS() fRate15() #Modifiers(NLRX1, RIG)
	MAVS_d: MAVS() -> 0  r17_k1 #Modifiers(MAVS)
	IRF_a1: 0  -> IRF() fRate17() #Modifiers(MAVS)
	IRF_a2: 0  -> IRF() fRate18() #Modifiers(NOD1)
	IRF_a3: 0  -> IRF() fRate19() #Modifiers(IFN)
	IRF_d: IRF() -> 0  r21_k1 #Modifiers(IRF)
	IFN_a: 0  -> IFN() fRate21() #Modifiers(IRF)
	IFN_d: IFN() -> 0  r23_k1 #Modifiers(IFN)
	NOD_a: 0  -> NOD1() fRate23() #Modifiers(HP)
	NOD_d: NOD1() -> 0  r25_k1 #Modifiers(NOD1)
	HP_IFN_reactants_0: 0  -> HP() -1*(fRate25()) #Modifiers(IFN)
	TRAF_a: 0  -> TRAF6() fRate26() #Modifiers(X, MyD88)
	TFa_a: 0  -> TFa() fRate27() #Modifiers(CytoL)
	TFa_d: TFa() -> 0  r29_k1 #Modifiers(TFa)
	TFi_a: 0  -> TFi() fRate29() #Modifiers(CytoE)
	TFi_d: TFi() -> 0  r31_k1 #Modifiers(TFi)
	CytoE_a: 0  -> CytoE() fRate31() #Modifiers(X, NFkB)
	CytoE_d: CytoE() -> 0  r33_k1 #Modifiers(CytoE)
	X_a: 0  -> X() fRate33() #Modifiers(NFkB)
	X_d: X() -> 0  r35_k1 #Modifiers(X)
	HP_CytoE_reactants_0: 0  -> HP() -1*(fRate35()) #Modifiers(CytoE)
end reaction rules
end model
