###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1406180001', 'http://identifiers.org/biomodels.db/BIOMD0000000601']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/26390403']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0014808']
#@BQB_OCCURS_IN:['http://identifiers.org/bto/BTO:0001849']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/10141']
#@creatorEmail:'juty@ebi.ac.uk'
#@creatorName:'Juty Nick'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 5 molecules and 3 reactions. The translated model has 4 molecules and 13 rules'
###
begin model
begin parameters
	parameter_1 35.0
	parameter_2 65.0
	parameter_3 1.125e-05
	parameter_4 7.5e-06
	parameter_5 0.052
	parameter_6 1.7
	parameter_7 3e-07
	parameter_8 2.0
	parameter_9 100.0
	parameter_10 1.8
	parameter_11 4000.0
	parameter_14 0.0001515
	parameter_15 10.0
	parameter_25 0.00015
end parameters
begin compartments
	#volume units: L
	mw0dac359a_a4cd_40bf_97a0_45006cef2a7c 3 0.052 #SR
	mw44539b83_caa2_4da5_bae0_a8dcf7439431 3 1.0 #cytoplasm
end compartments
begin molecule types
	#^ bqbiol:isVersionOf chebi:CHEBI:29108
	Ca_SR_Total()
	#^ bqbiol:isVersionOf chebi:CHEBI:29108
	Ca_i()
	#^ bqbiol:isVersionOf chebi:CHEBI:29108
	Ca_SR()
	#^ bqbiol:isVersionOf chebi:CHEBI:29108
	Ca_i_Total()
end molecule types
begin seed species
	@mw0dac359a_a4cd_40bf_97a0_45006cef2a7c:Ca_SR_Total() 0.03173076923076923 #Ca_SR_Total #mwd805cc43_4a96_472f_a894_c119a6aa895f
	@mw0dac359a_a4cd_40bf_97a0_45006cef2a7c:Ca_SR() 0.00015000000000000001 #Ca_SR #mw447078ee_8bc8_4358_abcd_ade10dba93b0
	@mw44539b83_caa2_4da5_bae0_a8dcf7439431:Ca_i_Total() 7.5e-06 #Ca_i_Total #mw40a96ef6_32da_46d1_9712_4f53f60bad43
	@mw44539b83_caa2_4da5_bae0_a8dcf7439431:Ca_i() 7.5e-08 #Ca_i #mwe1a0a651_d2d5_4f75_8d45_9336c60eb9a6
end seed species
begin observables
	Species Ca_SR_Total_mw0dac359a_a4cd_40bf_97a0_45006cef2a7c @mw0dac359a_a4cd_40bf_97a0_45006cef2a7c:Ca_SR_Total() #Ca_SR_Total
	Species Ca_SR_mw0dac359a_a4cd_40bf_97a0_45006cef2a7c @mw0dac359a_a4cd_40bf_97a0_45006cef2a7c:Ca_SR() #Ca_SR
	Species Ca_i_Total_mw44539b83_caa2_4da5_bae0_a8dcf7439431 @mw44539b83_caa2_4da5_bae0_a8dcf7439431:Ca_i_Total() #Ca_i_Total
	Species Ca_i_mw44539b83_caa2_4da5_bae0_a8dcf7439431 @mw44539b83_caa2_4da5_bae0_a8dcf7439431:Ca_i() #Ca_i
end observables
begin functions
	parameter_22() = (parameter_2*parameter_5^parameter_6*(parameter_4/parameter_9)^parameter_10*(parameter_4/parameter_9)^(-parameter_8)*(parameter_25 - parameter_4/parameter_9)*(parameter_7^parameter_8 + (parameter_4/parameter_9)^parameter_8)/parameter_3 - (parameter_4/parameter_9)^parameter_10)^(1/parameter_10)
	Ca_i_ar() = Ca_i_Total_mw44539b83_caa2_4da5_bae0_a8dcf7439431/parameter_9
	parameter_23() = (Ca_i_ar*(caff_mw44539b83_caa2_4da5_bae0_a8dcf7439431*parameter_11 + 1))^parameter_10/(parameter_22^parameter_10 + (Ca_i_ar*(caff_mw44539b83_caa2_4da5_bae0_a8dcf7439431*parameter_11 + 1))^parameter_10)
	parameter_24() = parameter_15*(parameter_14 - parameter_25)
	parameter_26() = Ca_SR_Total_mw0dac359a_a4cd_40bf_97a0_45006cef2a7c + parameter_14 + parameter_24
	Ca_SR_ar() = parameter_26/2 - sqrt(-4*Ca_SR_Total_mw0dac359a_a4cd_40bf_97a0_45006cef2a7c*parameter_14 + parameter_26^2)/2
	fRate0() = Ca_i_mw44539b83_caa2_4da5_bae0_a8dcf7439431^parameter_8*parameter_3/(Ca_i_mw44539b83_caa2_4da5_bae0_a8dcf7439431^parameter_8 + parameter_7^parameter_8)
	fRate1() = parameter_2*parameter_23*parameter_5^parameter_6*(Ca_SR_mw0dac359a_a4cd_40bf_97a0_45006cef2a7c - Ca_i_mw44539b83_caa2_4da5_bae0_a8dcf7439431)
	fRate2() = parameter_1*(Ca_i_mw44539b83_caa2_4da5_bae0_a8dcf7439431 - parameter_4/parameter_9)
end functions
begin reaction rules
	mw97ca2b6b_8c30_48ef_80cb_5ce4ebaa420f_reactants_0: 0  -> Ca_i_Total()@mw44539b83_caa2_4da5_bae0_a8dcf7439431 -1*(fRate0())
	mw97ca2b6b_8c30_48ef_80cb_5ce4ebaa420f_reactants_1: 0  -> Ca_i()@mw44539b83_caa2_4da5_bae0_a8dcf7439431 -1*(fRate0())
	mw97ca2b6b_8c30_48ef_80cb_5ce4ebaa420f_products_0: 0  -> Ca_SR_Total()@mw0dac359a_a4cd_40bf_97a0_45006cef2a7c fRate0()
	mw97ca2b6b_8c30_48ef_80cb_5ce4ebaa420f_products_1: 0  -> Ca_i()@mw44539b83_caa2_4da5_bae0_a8dcf7439431 fRate0()
	mw18c30692_65ff_4c7a_b820_079f8ddd9b33_reactants_0: 0  -> Ca_SR_Total()@mw0dac359a_a4cd_40bf_97a0_45006cef2a7c -1*(fRate1())
	mw18c30692_65ff_4c7a_b820_079f8ddd9b33_reactants_1: 0  -> Ca_SR()@mw0dac359a_a4cd_40bf_97a0_45006cef2a7c -1*(fRate1())
	mw18c30692_65ff_4c7a_b820_079f8ddd9b33_reactants_2: 0  -> Ca_i()@mw44539b83_caa2_4da5_bae0_a8dcf7439431 -1*(fRate1())
	mw18c30692_65ff_4c7a_b820_079f8ddd9b33_products_0: 0  -> Ca_i_Total()@mw44539b83_caa2_4da5_bae0_a8dcf7439431 fRate1()
	mw18c30692_65ff_4c7a_b820_079f8ddd9b33_products_1: 0  -> Ca_SR()@mw0dac359a_a4cd_40bf_97a0_45006cef2a7c fRate1()
	mw18c30692_65ff_4c7a_b820_079f8ddd9b33_products_2: 0  -> Ca_i()@mw44539b83_caa2_4da5_bae0_a8dcf7439431 fRate1()
	mwf3ceaa7c_ebe4_4e1b_842a_b4446b0aa527_reactants_0: 0  -> Ca_i_Total()@mw44539b83_caa2_4da5_bae0_a8dcf7439431 -1*(fRate2())
	mwf3ceaa7c_ebe4_4e1b_842a_b4446b0aa527_reactants_1: 0  -> Ca_i()@mw44539b83_caa2_4da5_bae0_a8dcf7439431 -1*(fRate2())
	mwf3ceaa7c_ebe4_4e1b_842a_b4446b0aa527_products_0: 0  -> Ca_i()@mw44539b83_caa2_4da5_bae0_a8dcf7439431 fRate2()
end reaction rules
end model
