###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1511160000', 'http://identifiers.org/biomodels.db/BIOMD0000000611']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/26312163']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/biomodels.db/BIOMD0000000340', 'http://identifiers.org/biomodels.db/MODEL1108260014', 'http://identifiers.org/biomodels.db/BIOMD0000000335', 'http://identifiers.org/biomodels.db/BIOMD0000000339', 'http://identifiers.org/biomodels.db/BIOMD0000000338']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0007596']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_HAS_PROPERTY:['http://identifiers.org/doid/DOID:1247']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 66 molecules and 62 reactions. The translated model has 24 molecules and 62 rules'
###
begin model
begin parameters
	k1 0.0043339901
	k2 0.0041242451
	k3 0.0019496187
	k4 0.075680013
	k5 0.00033894832
	k6 0.009975373
	k7 1.1527134e-05
	k8 1.3800407
	k9 0.036245656
	k10 8.9987819
	k11 9.5
	k12 0.032999929
	k13 20.6708
	k14 0.010569458
	k15 2.3887492
	k16 3.764127e-05
	k17 1.44895
	k18 0.0050724996
	k19 0.11749508
	k20 0.0013766033
	k21 0.048795021
	k22 42.71401
	k23 3.3e-05
	k24 0.009
	k25 0.0013357963
	k26 0.0013946425
	k27 0.00040233556
	k29 149.91541
	k30 0.10001522
	k31 29.479266
	k32 0.21872155
	k33 0.0001801577
	k34 0.00045
	k35 0.00010062408
	k36 0.25638864
	k37 0.025386917
	k38 1.0556718e-06
	k39 3.55e-06
	k40 2.8169728e-07
	k41 3.917682e-06
	k42 3.2905257e-07
	mwe5422617_5481_47c8_bf98_d6e3f1e96384 8.5153312e-06
	mw3ab61faa_95e4_40a9_93de_5c51755957c4 0.091852853
	mw862c3fea_05a0_4d3d_ba5c_9727bbb67907 1800.0
	mw107e9839_b4a4_46c8_9102_da7d857fd655 47.928292
	mweb1be1ac_0c60_4849_b306_071c8f9370c0 0.15
	mw94d2be4e_839e_4154_a6f0_f0d6b61e50a9 57.613526
	mw6f439ade_bb02_4671_8e45_8beaa312b3d2 4.1832115
	mwf677450c_a4e3_41df_be5a_9c8928ac27f4 1.08e-08
	mweacc6c48_8e8c_481b_92ce_0cb9ccb3be00 4.8e-07
	mwc0cb654e_d95f_4d4b_8dc2_3a21afd35a19 0.13081564
	mwb01ef86f_18d8_45e7_a452_31878dcb3d49 30.668349
	mw7300dcac_9389_4201_88c7_7effa7fdb0f3 10.565569
	mw44adf04a_f1e2_4ca9_9615_5a9f4d3bbea8 0.13304333
	mwc189e7ea_7518_4a4f_be0f_03f2d073b29e 83.206626
	mwaec203ce_06d5_4003_bfdb_7244d3d77255 0.0011427258
	mw05b4111c_4463_4be0_aa1e_5a8f50c7bf67 0.059664002
	mw7b89687a_3110_4d5f_a9ec_7ca8761f0d41 84.659935
	mw61fdd721_9193_442c_bc9e_f1058c4720e7 1.2943783e-05
	mw1ddc2a05_bc78_4434_a2d9_d06701483346 19.338228
	mw4fc81076_be53_4fc3_9ade_3587e8d60355 0.1857857
	mwa4cc6bbe_c310_445f_bba7_a94868342831 10740.276
	mwd6b996b1_d7fe_42de_b17e_b2482109c54d 0.1043597
	mwc5dc3645_536d_4bb4_88c7_4aeac4f5a241 2.0649128
	mwc85f8d37_7f39_41b2_8ea4_00b5adad2eac 0.07934338
	mw807b9a99_fb16_421f_b724_69f29f3fcfb2 1.9895374
	mw234b484f_d2d5_4ae8_a077_217c600588d8 0.24027638
	mwa2636601_825e_4846_aa2d_c35bd242ec99 0.032359973
	mw70d2f292_be41_4999_99cb_9c146808db85 0.077518002
	mw0e80d629_98c1_44a6_bd57_3a4027c87b4c 2.0869571
	mw7aeacec0_be36_49bf_8548_7a3e2b5fe3cb 0.029887563
	mwb63aa5ed_b6d8_4241_9987_54828945aea3 0.1289308
	mw4d2fe532_2ccd_42c4_9b4b_759022a87484 1.4001578
	mw6b555ed1_194e_4fa4_9688_8105aa7c60c0 0.013215482
	mwaa306898_0d0f_4748_b48a_fcd56bdc0b16 0.15
	mwec1b7289_5544_4c2b_b9f6_bf6524cabda5 3.15
	mw6843129b_7601_452f_be5d_977f7203bfb5 0.0345
	mwc7a68e9d_cc1f_48bf_a582_c06056d082ad 3400.0
	mwbcd76870_e02a_442b_abdf_e42cd7086a1f 1.7143
	mw69d180ec_210d_4add_b599_e567c88ee538 9000.0
	mwf402f97a_30c4_457f_9ef4_1be774a61358 1400.0
	mwed93f2e8_0fdb_4c44_bb8f_aeef60171b0a 90.0
	mw61f543e9_43eb_442d_9985_d08f83a35bcd 60.0
	mwf4279c86_df09_4b2e_9fae_a6b9436be477 450.0
	mw09b305e5_8e0c_4d34_a367_72e681d24550 0.001743
	mwf417c223_4f28_436b_be61_dc0a6db906e9 2.5
	mw21356d0a_52a7_47d9_a80b_c83f72f91249 0.5
	mw6657e10d_433c_402e_af1d_edde69570dc7 20.0
	mw3c8d8702_954e_4beb_9094_8fae9207cfb4 10.0
	mw10579ad2_4018_4dc2_bd2d_cbc2b46014d2 0.1
	mwa8eaa9b8_8166_49f0_b98a_ee69239b6f37 0.7
	mw2555880e_202e_42c6_bcb5_c565dd6748d7 160.0
	mwd49f57a8_7e48_4891_bb1e_3e83f28d63a2 31.0
	mw069bc62a_eef3_452c_9c80_6ac8e99131f3 340.0
	mwea0d7c35_f4d2_4205_8c59_11ac05134dde 0.00010958881
	mw8482ca53_fca1_4841_ac2f_2469a76a758e 0.12914436
	mwaf2c7981_908c_4f4c_898e_2491a9f04e17 0.10523968
	mw3b48c5e7_774a_4dc4_917f_8f8cff8d9c4b 90.211653
	mw1511789f_5e7b_43bf_b162_d930b027a867 0.006
	mw7ff84021_4836_4a63_84fc_4389e5f74f81 0.13632245
	mw204ea0fc_f851_4d50_9b82_bc66e34ac7dc 18.705029
	mw95ac212b_a197_49d6_8c76_bc6154a4cf5e 0.00035000006
	mw9bcd5c0b_3384_4d5e_92ce_70b13d64e8b8 0.11573051
	mw95e328a0_be5b_4260_b6e4_d85c4c4aae9e 0.050084768
	mw7be1d52f_926f_47e0_964b_d3303c8453b1 0.05
	mw889568f2_c2e0_4ea3_ad4c_b26b66888184 0
end parameters
begin molecule types
	TF(vii)
	VIIIa(_deg~_DEG~0,ix,pc)
	VII(a~A~0,tf,x)
	K(p~P~0,xii)
	X(a~A~0,atiii,ix,tfpi,v,vii,viii)
	ATIII(ii,ix,x,xi,xii)
	XII(a~A~0,atiii,k,xi)
	II(a~A~0,atiii,m~M~0,tmod)
	VIIIa2()
	TF_VIIa_IX()
	VIIIa1_L()
	IX(a~A~0,atiii,viiia,x,xi)
	IIa_Tmod_PC()
	V(_deg~_DEG~0,a~A~0,pc,x)
	XI(a~A~0,atiii,ix,xii)
	F12(_deg~_DEG~0)
	TFPI(x)
	TF_VIIa_ATIII()
	PC(a~A~0,v,viiia)
	Tmod(ii)
	F(g~G~0)
	CA()
	VIII(x)
	Xa_Va_II()
end molecule types
begin seed species
	TF(vii) (0.001743) / (1.7143) #TF
	X(a~0,atiii,ix,tfpi,v,vii,viii) (160.0) / (1.7143) #X
	IX(a~0,atiii,viiia,x,xi) (90.0) / (1.7143) #IX
	II(a~0,atiii,m~0,tmod) (1400.0) / (1.7143) #II
	V(_deg~0,a~0,pc,x) (20.0) / (1.7143) #V
	TFPI(x) (2.5) / (1.7143) #TFPI
	ATIII(ii,ix,x,xi,xii) (3400.0) / (1.7143) #ATIII
	X(a~A,atiii,ix,tfpi,v,vii,viii) (0) / (1.7143) #Xa
	XII(a~0,atiii,k,xi) (340.0) / (1.7143) #mw469042d3_a94f_4ebe_af1c_1ead580aad2a
	K(p~P,xii) (450.0) / (1.7143) #mw8c2b9a07_22c3_4912_adb1_167a38ea4cb3
	XI(a~0,atiii,ix,xii) (31.0) / (1.7143) #mwe043d306_ffdd_447b_9826_4df8abbece4d
	Tmod(ii) (0.5) / (1.7143) #mwd68cbf38_9266_4dfb_aa00_f817c3421aec
	PC(a~0,v,viiia) (60.0) / (1.7143) #mw6a8501d2_9479_41ae_8616_1e8d0e1bbfa9
	F(g~G) (9000.0) / (1.7143) #mwd3e1ba39_ab10_4702_addd_fb6a7e184a4b
end seed species
begin observables
	Species TF TF(vii) #TF
	Species TF_VII VII(a~0,tf!190,x).TF(vii!190) #TF_VII
	Species VII VII(a~0,tf,x) #VII
	Species TF_VIIa VII(a~A,tf!190,x).TF(vii!190) #TF_VIIa
	Species VIIa VII(a~A,tf,x) #VIIa
	Species Xa X(a~A,atiii,ix,tfpi,v,vii,viii) #Xa
	Species IIa II(a~A,atiii,m~0,tmod) #IIa
	Species TF_VIIa_X X(a~0,atiii,ix,tfpi,v,vii!193,viii).VII(a~A,tf!190,x!193).TF(vii!190) #TF_VIIa_X
	Species X X(a~0,atiii,ix,tfpi,v,vii,viii) #X
	Species TF_VIIa_Xa X(a~A,atiii,ix,tfpi,v,vii!193,viii).VII(a~A,tf!190,x!193).TF(vii!190) #TF_VIIa_Xa
	Species IX IX(a~0,atiii,viiia,x,xi) #IX
	Species TF_VIIa_IX TF_VIIa_IX() #TF_VIIa_IX
	Species IXa IX(a~A,atiii,viiia,x,xi) #IXa
	Species II II(a~0,atiii,m~0,tmod) #II
	Species VIII VIII(x) #VIII
	Species VIIIa VIIIa(_deg~0,ix,pc) #VIIIa
	Species IXa_VIIIa IX(a~A,atiii,viiia!199,x,xi).VIIIa(_deg~0,ix!199,pc) #IXa_VIIIa
	Species IXa_VIIIa_X X(a~0,atiii,ix!191,tfpi,v,vii,viii).IX(a~A,atiii,viiia!199,x!191,xi).VIIIa(_deg~0,ix!199,pc) #IXa_VIIIa_X
	Species VIIIa1_L VIIIa1_L() #VIIIa1_L
	Species VIIIa2 VIIIa2() #VIIIa2
	Species V V(_deg~0,a~0,pc,x) #V
	Species Va V(_deg~0,a~A,pc,x) #Va
	Species Xa_Va X(a~A,atiii,ix,tfpi,v!205,vii,viii).V(_deg~0,a~A,pc,x!205) #Xa_Va
	Species Xa_Va_II Xa_Va_II() #Xa_Va_II
	Species mIIa II(a~A,atiii,m~M,tmod) #mIIa
	Species TFPI TFPI(x) #TFPI
	Species Xa_TFPI X(a~A,atiii,ix,tfpi!194,v,vii,viii).TFPI(x!194) #Xa_TFPI
	Species TF_VIIa_Xa_TFPI X(a~A,atiii,ix,tfpi!194,v,vii!193,viii).VII(a~A,tf!190,x!193).TF(vii!190).TFPI(x!194) #TF_VIIa_Xa_TFPI
	Species ATIII ATIII(ii,ix,x,xi,xii) #ATIII
	Species Xa_ATIII X(a~A,atiii!197,ix,tfpi,v,vii,viii).ATIII(ii,ix,x!197,xi,xii) #Xa_ATIII
	Species mIIa_ATIII ATIII(ii!201,ix,x,xi,xii).II(a~A,atiii!201,m~M,tmod) #mIIa_ATIII
	Species IXa_ATIII IX(a~A,atiii!200,viiia,x,xi).ATIII(ii,ix!200,x,xi,xii) #IXa_ATIII
	Species IIa_ATIII ATIII(ii!201,ix,x,xi,xii).II(a~A,atiii!201,m~0,tmod) #IIa_ATIII
	Species TF_VIIa_ATIII TF_VIIa_ATIII() #TF_VIIa_ATIII
	Species CA CA() #CA
	Species XII XII(a~0,atiii,k,xi) #XII
	Species XIIa XII(a~A,atiii,k,xi) #XIIa
	Species PK K(p~P,xii) #PK
	Species XIIa_PK XII(a~A,atiii,k!189,xi).K(p~P,xii!189) #XIIa_PK
	Species K K(p~0,xii) #K
	Species XII_K XII(a~0,atiii,k!189,xi).K(p~0,xii!189) #XII_K
	Species XIIa_ATIII ATIII(ii,ix,x,xi,xii!204).XII(a~A,atiii!204,k,xi) #XIIa_ATIII
	Species XI XI(a~0,atiii,ix,xii) #XI
	Species XIa XI(a~A,atiii,ix,xii) #XIa
	Species XIIa_XI XI(a~0,atiii,ix,xii!195).XII(a~A,atiii,k,xi!195) #XIIa_XI
	Species XIa_ATIII ATIII(ii,ix,x,xi!202,xii).XI(a~A,atiii!202,ix,xii) #XIa_ATIII
	Species XIa_IX IX(a~0,atiii,viiia,x,xi!192).XI(a~A,atiii,ix!192,xii) #XIa_IX
	Species IXa_X X(a~0,atiii,ix!191,tfpi,v,vii,viii).IX(a~A,atiii,viiia,x!191,xi) #IXa_X
	Species VIIa_X X(a~0,atiii,ix,tfpi,v,vii!193,viii).VII(a~A,tf,x!193) #VIIa_X
	Species Tmod Tmod(ii) #Tmod
	Species IIa_Tmod II(a~A,atiii,m~0,tmod!198).Tmod(ii!198) #IIa_Tmod
	Species PC PC(a~0,v,viiia) #PC
	Species IIa_Tmod_PC IIa_Tmod_PC() #IIa_Tmod_PC
	Species APC PC(a~A,v,viiia) #APC
	Species Fg F(g~G) #Fg
	Species F F(g~0) #F
	Species APC_Va V(_deg~0,a~A,pc!206,x).PC(a~A,v!206,viiia) #APC_Va
	Species APC_VIIIa VIIIa(_deg~0,ix,pc!203).PC(a~A,v,viiia!203) #APC_VIIIa
	Species Va_deg V(_deg~_DEG,a~A,pc,x) #Va_deg
	Species VIIIa_deg VIIIa(_deg~_DEG,ix,pc) #VIIIa_deg
	Species APC_IXa_VIIIa IX(a~A,atiii,viiia!199,x,xi).VIIIa(_deg~0,ix!199,pc!203).PC(a~A,v,viiia!203) #APC_IXa_VIIIa
	Species APC_IXa_VIIIa_X X(a~0,atiii,ix!191,tfpi,v,vii,viii).IX(a~A,atiii,viiia!199,x!191,xi).VIIIa(_deg~0,ix!199,pc!203).PC(a~A,v,viiia!203) #APC_IXa_VIIIa_X
	Species Xa_VIII X(a~A,atiii,ix,tfpi,v,vii,viii!196).VIII(x!196) #Xa_VIII
	Species F12 F12(_deg~0) #F12
	Species F12_deg F12(_deg~_DEG) #F12_deg
end observables
begin functions
	IIa_12mIIa_ar() = IIa + 1.2*mIIa
	fRate49() = mw3b48c5e7_774a_4dc4_917f_8f8cff8d9c4b/(Fg + mwa4cc6bbe_c310_445f_bba7_a94868342831)
end functions
begin reaction rules
	R1: TF(vii) + VII(a~0,tf,x) <-> VII(a~0,tf!190,x).TF(vii!190) k2,k1 #Modifiers(TF, VII, TF_VII, TF, VII, TF_VII)
	R2: TF(vii) + VII(a~A,tf,x) <-> VII(a~A,tf!190,x).TF(vii!190) k4,k3 #Modifiers(TF, VIIa, TF_VIIa, TF, VIIa, TF_VIIa)
	R3: VII(a~A,tf!190,x).TF(vii!190) + VII(a~0,tf,x) -> VII(a~A,tf!190,x).TF(vii!190) + VII(a~A,tf,x) k5 #Modifiers(TF_VIIa, VII, TF_VIIa, VII)
	R4: X(a~A,atiii,ix,tfpi,v,vii,viii) + VII(a~0,tf,x) -> X(a~A,atiii,ix,tfpi,v,vii,viii) + VII(a~A,tf,x) k6 #Modifiers(Xa, VII, Xa, VII)
	R5: II(a~A,atiii,m~0,tmod) + VII(a~0,tf,x) -> II(a~A,atiii,m~0,tmod) + VII(a~A,tf,x) k7 #Modifiers(IIa, VII, IIa, VII)
	R6: VII(a~A,tf!190,x).TF(vii!190) + X(a~0,atiii,ix,tfpi,v,vii,viii) <-> X(a~0,atiii,ix,tfpi,v,vii!193,viii).VII(a~A,tf!190,x!193).TF(vii!190) k9,k8 #Modifiers(TF_VIIa, X, TF_VIIa_X, TF_VIIa, X, TF_VIIa_X)
	R6b: X(a~0,atiii,ix,tfpi,v,vii!193,viii).VII(a~A,tf!190,x!193).TF(vii!190) -> X(a~A,atiii,ix,tfpi,v,vii!193,viii).VII(a~A,tf!190,x!193).TF(vii!190) k10 #Modifiers(TF_VIIa_X, TF_VIIa_X)
	R7: VII(a~A,tf!190,x).TF(vii!190) + X(a~A,atiii,ix,tfpi,v,vii,viii) <-> X(a~A,atiii,ix,tfpi,v,vii!193,viii).VII(a~A,tf!190,x!193).TF(vii!190) k12,k11 #Modifiers(TF_VIIa, Xa, TF_VIIa_Xa, TF_VIIa, Xa, TF_VIIa_Xa)
	R8: VII(a~A,tf!190,x).TF(vii!190) + IX(a~0,atiii,viiia,x,xi) <-> TF_VIIa_IX() k14,k13 #Modifiers(TF_VIIa, IX, TF_VIIa_IX, TF_VIIa, IX, TF_VIIa_IX)
	R8b: TF_VIIa_IX() -> VII(a~A,tf!190,x).TF(vii!190) + IX(a~A,atiii,viiia,x,xi) k15 #Modifiers(TF_VIIa_IX, TF_VIIa_IX)
	R9: X(a~A,atiii,ix,tfpi,v,vii,viii) + II(a~0,atiii,m~0,tmod) -> X(a~A,atiii,ix,tfpi,v,vii,viii) + II(a~A,atiii,m~0,tmod) + F12(_deg~0) k16 #Modifiers(Xa, II, Xa, II)
	R10: II(a~A,atiii,m~0,tmod) + VIII(x) -> II(a~A,atiii,m~0,tmod) + VIIIa(_deg~0,ix,pc) k17 #Modifiers(IIa, VIII, IIa, VIII)
	R11: IX(a~A,atiii,viiia,x,xi) + VIIIa(_deg~0,ix,pc) <-> IX(a~A,atiii,viiia!199,x,xi).VIIIa(_deg~0,ix!199,pc) k19,k18 #Modifiers(IXa, VIIIa, IXa_VIIIa, IXa, VIIIa, IXa_VIIIa)
	R12: IX(a~A,atiii,viiia!199,x,xi).VIIIa(_deg~0,ix!199,pc) + X(a~0,atiii,ix,tfpi,v,vii,viii) <-> X(a~0,atiii,ix!191,tfpi,v,vii,viii).IX(a~A,atiii,viiia!199,x!191,xi).VIIIa(_deg~0,ix!199,pc) k21,k20 #Modifiers(IXa_VIIIa, X, IXa_VIIIa_X, IXa_VIIIa, X, IXa_VIIIa_X)
	R12b: X(a~0,atiii,ix!191,tfpi,v,vii,viii).IX(a~A,atiii,viiia!199,x!191,xi).VIIIa(_deg~0,ix!199,pc) -> IX(a~A,atiii,viiia!199,x,xi).VIIIa(_deg~0,ix!199,pc) + X(a~A,atiii,ix,tfpi,v,vii,viii) k22 #Modifiers(IXa_VIIIa_X, IXa_VIIIa_X)
	R13: VIIIa(_deg~0,ix,pc) <-> VIIIa1_L() + VIIIa2() k24,k23 #Modifiers(VIIIa, VIIIa1_L, VIIIa2, VIIIa, VIIIa1_L, VIIIa2)
	R14: X(a~0,atiii,ix!191,tfpi,v,vii,viii).IX(a~A,atiii,viiia!199,x!191,xi).VIIIa(_deg~0,ix!199,pc) -> VIIIa1_L() + VIIIa2() + X(a~0,atiii,ix,tfpi,v,vii,viii) + IX(a~A,atiii,viiia,x,xi) k25 #Modifiers(IXa_VIIIa_X, IXa_VIIIa_X)
	R15: IX(a~A,atiii,viiia!199,x,xi).VIIIa(_deg~0,ix!199,pc) -> VIIIa1_L() + VIIIa2() + IX(a~A,atiii,viiia,x,xi) k26 #Modifiers(IXa_VIIIa, IXa_VIIIa)
	R16: II(a~A,atiii,m~0,tmod) + V(_deg~0,a~0,pc,x) -> II(a~A,atiii,m~0,tmod) + V(_deg~0,a~A,pc,x) k27 #Modifiers(IIa, V, IIa, V)
	R17: X(a~A,atiii,ix,tfpi,v,vii,viii) + V(_deg~0,a~A,pc,x) <-> X(a~A,atiii,ix,tfpi,v!205,vii,viii).V(_deg~0,a~A,pc,x!205) mw8482ca53_fca1_4841_ac2f_2469a76a758e,mw1511789f_5e7b_43bf_b162_d930b027a867 #Modifiers(Xa, Va, Xa_Va, Xa, Va, Xa_Va)
	R18: X(a~A,atiii,ix,tfpi,v!205,vii,viii).V(_deg~0,a~A,pc,x!205) + II(a~0,atiii,m~0,tmod) <-> Xa_Va_II() k30,k29 #Modifiers(Xa_Va, II, Xa_Va_II, Xa_Va, II, Xa_Va_II)
	R18b: Xa_Va_II() -> X(a~A,atiii,ix,tfpi,v!205,vii,viii).V(_deg~0,a~A,pc,x!205) + II(a~A,atiii,m~M,tmod) + F12(_deg~0) k31 #Modifiers(Xa_Va_II, Xa_Va_II)
	R19: II(a~A,atiii,m~M,tmod) + X(a~A,atiii,ix,tfpi,v!205,vii,viii).V(_deg~0,a~A,pc,x!205) -> II(a~A,atiii,m~0,tmod) + X(a~A,atiii,ix,tfpi,v!205,vii,viii).V(_deg~0,a~A,pc,x!205) k32 #Modifiers(mIIa, Xa_Va, mIIa, Xa_Va)
	R20: X(a~A,atiii,ix,tfpi,v,vii,viii) + TFPI(x) <-> X(a~A,atiii,ix,tfpi!194,v,vii,viii).TFPI(x!194) k34,k33 #Modifiers(Xa, TFPI, Xa_TFPI, Xa, TFPI, Xa_TFPI)
	R21: X(a~A,atiii,ix,tfpi,v,vii!193,viii).VII(a~A,tf!190,x!193).TF(vii!190) + TFPI(x) <-> X(a~A,atiii,ix,tfpi!194,v,vii!193,viii).VII(a~A,tf!190,x!193).TF(vii!190).TFPI(x!194) k36,k35 #Modifiers(TF_VIIa_Xa, TFPI, TF_VIIa_Xa_TFPI, TF_VIIa_Xa, TFPI, TF_VIIa_Xa_TFPI)
	R22: VII(a~A,tf!190,x).TF(vii!190) + X(a~A,atiii,ix,tfpi!194,v,vii,viii).TFPI(x!194) -> X(a~A,atiii,ix,tfpi!194,v,vii!193,viii).VII(a~A,tf!190,x!193).TF(vii!190).TFPI(x!194) k37 #Modifiers(TF_VIIa, Xa_TFPI, TF_VIIa, Xa_TFPI)
	R23: X(a~A,atiii,ix,tfpi,v,vii,viii) + ATIII(ii,ix,x,xi,xii) -> X(a~A,atiii!197,ix,tfpi,v,vii,viii).ATIII(ii,ix,x!197,xi,xii) k38 #Modifiers(Xa, ATIII, Xa, ATIII)
	R24: II(a~A,atiii,m~M,tmod) + ATIII(ii,ix,x,xi,xii) -> ATIII(ii!201,ix,x,xi,xii).II(a~A,atiii!201,m~M,tmod) k39 #Modifiers(mIIa, ATIII, mIIa, ATIII)
	R25: IX(a~A,atiii,viiia,x,xi) + ATIII(ii,ix,x,xi,xii) -> IX(a~A,atiii!200,viiia,x,xi).ATIII(ii,ix!200,x,xi,xii) k40 #Modifiers(IXa, ATIII, IXa, ATIII)
	R26: II(a~A,atiii,m~0,tmod) + ATIII(ii,ix,x,xi,xii) -> ATIII(ii!201,ix,x,xi,xii).II(a~A,atiii!201,m~0,tmod) k41 #Modifiers(IIa, ATIII, IIa, ATIII)
	R27: VII(a~A,tf!190,x).TF(vii!190) + ATIII(ii,ix,x,xi,xii) -> TF_VIIa_ATIII() k42 #Modifiers(TF_VIIa, ATIII, TF_VIIa, ATIII)
	mw356a0437_4d35_42d9_a964_d205845dd3a0: CA() + XII(a~0,atiii,k,xi) -> CA() + XII(a~A,atiii,k,xi) mwe5422617_5481_47c8_bf98_d6e3f1e96384 #Modifiers(mw4e2cf0b0_bd70_45a4_9e60_eba82fa5c3e4, mw469042d3_a94f_4ebe_af1c_1ead580aad2a, mw4e2cf0b0_bd70_45a4_9e60_eba82fa5c3e4, mw469042d3_a94f_4ebe_af1c_1ead580aad2a)
	mw2ad76883_679b_4cfa_a390_ed12c2cb488a: XII(a~A,atiii,k,xi) + K(p~P,xii) <-> XII(a~A,atiii,k!189,xi).K(p~P,xii!189) mw3ab61faa_95e4_40a9_93de_5c51755957c4,mw862c3fea_05a0_4d3d_ba5c_9727bbb67907 #Modifiers(mw6c404de5_5b24_48d6_a0c4_5491e07b1f72, mw8c2b9a07_22c3_4912_adb1_167a38ea4cb3, mw819d0d09_05ba_4674_85ba_5c9439fb77f4, mw6c404de5_5b24_48d6_a0c4_5491e07b1f72, mw8c2b9a07_22c3_4912_adb1_167a38ea4cb3, mw819d0d09_05ba_4674_85ba_5c9439fb77f4)
	mw7625dc03_2283_4c41_8d88_c03bbd995622: XII(a~A,atiii,k!189,xi).K(p~P,xii!189) -> XII(a~A,atiii,k,xi) + K(p~0,xii) mw107e9839_b4a4_46c8_9102_da7d857fd655 #Modifiers(mw819d0d09_05ba_4674_85ba_5c9439fb77f4, mw819d0d09_05ba_4674_85ba_5c9439fb77f4)
	mwb7173277_b0a8_4585_8e75_4188d464a440: XII(a~0,atiii,k,xi) + K(p~0,xii) <-> XII(a~0,atiii,k!189,xi).K(p~0,xii!189) mweb1be1ac_0c60_4849_b306_071c8f9370c0,mw94d2be4e_839e_4154_a6f0_f0d6b61e50a9 #Modifiers(mw469042d3_a94f_4ebe_af1c_1ead580aad2a, mw2be3652b_79af_4228_9d1c_9d65c7d0c70f, mw6a63ae22_6bb4_4dcf_992f_9287439dd556, mw469042d3_a94f_4ebe_af1c_1ead580aad2a, mw2be3652b_79af_4228_9d1c_9d65c7d0c70f, mw6a63ae22_6bb4_4dcf_992f_9287439dd556)
	mwa9bc550c_e44b_4a55_9d10_c274a9c710a8: XII(a~0,atiii,k!189,xi).K(p~0,xii!189) -> XII(a~A,atiii,k,xi) + K(p~0,xii) mw6f439ade_bb02_4671_8e45_8beaa312b3d2 #Modifiers(mw6a63ae22_6bb4_4dcf_992f_9287439dd556, mw6a63ae22_6bb4_4dcf_992f_9287439dd556)
	mwc0c930a7_ee46_48b9_bc37_297a29d337ed: XII(a~A,atiii,k,xi) + ATIII(ii,ix,x,xi,xii) -> ATIII(ii,ix,x,xi,xii!204).XII(a~A,atiii!204,k,xi) mwf677450c_a4e3_41df_be5a_9c8928ac27f4 #Modifiers(mw6c404de5_5b24_48d6_a0c4_5491e07b1f72, ATIII, mw6c404de5_5b24_48d6_a0c4_5491e07b1f72, ATIII)
	mwd29fbe1e_de98_4c2f_8d81_8ce87f0a245d: XII(a~A,atiii,k,xi) + XI(a~0,atiii,ix,xii) <-> XI(a~0,atiii,ix,xii!195).XII(a~A,atiii,k,xi!195) mw7ff84021_4836_4a63_84fc_4389e5f74f81,mw204ea0fc_f851_4d50_9b82_bc66e34ac7dc #Modifiers(mw6c404de5_5b24_48d6_a0c4_5491e07b1f72, mwe043d306_ffdd_447b_9826_4df8abbece4d, mwe51f72d2_84fb_4b43_b900_521410fdf99c, mw6c404de5_5b24_48d6_a0c4_5491e07b1f72, mwe043d306_ffdd_447b_9826_4df8abbece4d, mwe51f72d2_84fb_4b43_b900_521410fdf99c)
	mw733749dd_73df_4e8d_86b3_eabffb03d79e: XI(a~0,atiii,ix,xii!195).XII(a~A,atiii,k,xi!195) -> XII(a~A,atiii,k,xi) + XI(a~A,atiii,ix,xii) mw95ac212b_a197_49d6_8c76_bc6154a4cf5e #Modifiers(mwe51f72d2_84fb_4b43_b900_521410fdf99c, mwe51f72d2_84fb_4b43_b900_521410fdf99c)
	mwf959d54b_b8f2_4cf9_995a_bea2a3d1735d: XI(a~A,atiii,ix,xii) + ATIII(ii,ix,x,xi,xii) -> ATIII(ii,ix,x,xi!202,xii).XI(a~A,atiii!202,ix,xii) mweacc6c48_8e8c_481b_92ce_0cb9ccb3be00 #Modifiers(mw6591152c_8b5a_4c9b_b095_956988a01ba0, ATIII, mw6591152c_8b5a_4c9b_b095_956988a01ba0, ATIII)
	mw27430243_7541_45f2_a970_b53e97eb90b5: XI(a~A,atiii,ix,xii) + IX(a~0,atiii,viiia,x,xi) <-> IX(a~0,atiii,viiia,x,xi!192).XI(a~A,atiii,ix!192,xii) mwc0cb654e_d95f_4d4b_8dc2_3a21afd35a19,mwb01ef86f_18d8_45e7_a452_31878dcb3d49 #Modifiers(mw6591152c_8b5a_4c9b_b095_956988a01ba0, IX, mwe70b2c96_44b9_48eb_967a_7eb850a916a6, mw6591152c_8b5a_4c9b_b095_956988a01ba0, IX, mwe70b2c96_44b9_48eb_967a_7eb850a916a6)
	mwc9055518_a470_4fa9_9ebe_473dc2a371af: IX(a~0,atiii,viiia,x,xi!192).XI(a~A,atiii,ix!192,xii) -> XI(a~A,atiii,ix,xii) + IX(a~A,atiii,viiia,x,xi) mw7300dcac_9389_4201_88c7_7effa7fdb0f3 #Modifiers(mwe70b2c96_44b9_48eb_967a_7eb850a916a6, mwe70b2c96_44b9_48eb_967a_7eb850a916a6)
	mwfe3aa9b2_3507_4bda_b66a_d1b9ecf9b691: IX(a~A,atiii,viiia,x,xi) + X(a~0,atiii,ix,tfpi,v,vii,viii) <-> X(a~0,atiii,ix!191,tfpi,v,vii,viii).IX(a~A,atiii,viiia,x!191,xi) mw44adf04a_f1e2_4ca9_9615_5a9f4d3bbea8,mwc189e7ea_7518_4a4f_be0f_03f2d073b29e #Modifiers(IXa, X, mw64e9cef3_5dd3_43f3_ad04_58e8fc07a91b, IXa, X, mw64e9cef3_5dd3_43f3_ad04_58e8fc07a91b)
	mwf5ec17b4_374b_4670_83e5_47135df80cb9: X(a~0,atiii,ix!191,tfpi,v,vii,viii).IX(a~A,atiii,viiia,x!191,xi) -> IX(a~A,atiii,viiia,x,xi) + X(a~A,atiii,ix,tfpi,v,vii,viii) mwaec203ce_06d5_4003_bfdb_7244d3d77255 #Modifiers(mw64e9cef3_5dd3_43f3_ad04_58e8fc07a91b, mw64e9cef3_5dd3_43f3_ad04_58e8fc07a91b)
	mwea194c8b_e1a0_4a6e_a4d5_f55b2f784d87: VII(a~A,tf,x) + X(a~0,atiii,ix,tfpi,v,vii,viii) <-> X(a~0,atiii,ix,tfpi,v,vii!193,viii).VII(a~A,tf,x!193) mw05b4111c_4463_4be0_aa1e_5a8f50c7bf67,mw7b89687a_3110_4d5f_a9ec_7ca8761f0d41 #Modifiers(VIIa, X, mw6d041b25_87db_4394_9b8b_7ac61e01f359, VIIa, X, mw6d041b25_87db_4394_9b8b_7ac61e01f359)
	mwd58c2ecb_6ff8_4b9b_8c31_a7711b5217d5: X(a~0,atiii,ix,tfpi,v,vii!193,viii).VII(a~A,tf,x!193) -> VII(a~A,tf,x) + X(a~A,atiii,ix,tfpi,v,vii,viii) mw61fdd721_9193_442c_bc9e_f1058c4720e7 #Modifiers(mw6d041b25_87db_4394_9b8b_7ac61e01f359, mw6d041b25_87db_4394_9b8b_7ac61e01f359)
	mwa9e8a350_94c6_49e9_aba0_e23644ed770b: II(a~A,atiii,m~0,tmod) + Tmod(ii) <-> II(a~A,atiii,m~0,tmod!198).Tmod(ii!198) mw9bcd5c0b_3384_4d5e_92ce_70b13d64e8b8,mw95e328a0_be5b_4260_b6e4_d85c4c4aae9e #Modifiers(IIa, mwd68cbf38_9266_4dfb_aa00_f817c3421aec, mwa6be116e_72f1_439e_bca6_eb61f79cc68e, IIa, mwd68cbf38_9266_4dfb_aa00_f817c3421aec, mwa6be116e_72f1_439e_bca6_eb61f79cc68e)
	mw533077fb_883c_475c_8a43_ab003a69478c: II(a~A,atiii,m~0,tmod!198).Tmod(ii!198) + PC(a~0,v,viiia) <-> IIa_Tmod_PC() mwaf2c7981_908c_4f4c_898e_2491a9f04e17,mw1ddc2a05_bc78_4434_a2d9_d06701483346 #Modifiers(mwa6be116e_72f1_439e_bca6_eb61f79cc68e, mw6a8501d2_9479_41ae_8616_1e8d0e1bbfa9, mw3cec90c2_500e_4f30_b6be_325ef5194755, mwa6be116e_72f1_439e_bca6_eb61f79cc68e, mw6a8501d2_9479_41ae_8616_1e8d0e1bbfa9, mw3cec90c2_500e_4f30_b6be_325ef5194755)
	mw3a695e19_d2d0_4083_af5a_1e8dd673dd32: IIa_Tmod_PC() -> II(a~A,atiii,m~0,tmod!198).Tmod(ii!198) + PC(a~A,v,viiia) mw4fc81076_be53_4fc3_9ade_3587e8d60355 #Modifiers(mw3cec90c2_500e_4f30_b6be_325ef5194755, mw3cec90c2_500e_4f30_b6be_325ef5194755)
	mw95b41c99_0a48_4f12_8367_f5b176c613e5: II(a~A,atiii,m~0,tmod) + F(g~G) -> II(a~A,atiii,m~0,tmod) + F(g~0) fRate49() #Modifiers(IIa, mwd3e1ba39_ab10_4702_addd_fb6a7e184a4b, IIa, mwd3e1ba39_ab10_4702_addd_fb6a7e184a4b)
	mw13213f35_d931_4cec_a202_9760e9a3e4b1: PC(a~A,v,viiia) + V(_deg~0,a~A,pc,x) <-> V(_deg~0,a~A,pc!206,x).PC(a~A,v!206,viiia) mwd6b996b1_d7fe_42de_b17e_b2482109c54d,mwc5dc3645_536d_4bb4_88c7_4aeac4f5a241 #Modifiers(mwedf22864_05a0_40c3_a0d5_ede45a3e7e8f, Va, mw2e632a32_3823_4933_95cb_19567cbcc66a, mwedf22864_05a0_40c3_a0d5_ede45a3e7e8f, Va, mw2e632a32_3823_4933_95cb_19567cbcc66a)
	mw42194b65_07a6_43c3_a810_2d2c1b4fad6b: PC(a~A,v,viiia) + VIIIa(_deg~0,ix,pc) <-> VIIIa(_deg~0,ix,pc!203).PC(a~A,v,viiia!203) mwc85f8d37_7f39_41b2_8ea4_00b5adad2eac,mw807b9a99_fb16_421f_b724_69f29f3fcfb2 #Modifiers(mwedf22864_05a0_40c3_a0d5_ede45a3e7e8f, VIIIa, mw8bdbd17d_f542_4b8c_88c6_a82eaf997a43, mwedf22864_05a0_40c3_a0d5_ede45a3e7e8f, VIIIa, mw8bdbd17d_f542_4b8c_88c6_a82eaf997a43)
	mwe33e10f1_9ee4_4167_94cf_81ed3aafb1af: V(_deg~0,a~A,pc!206,x).PC(a~A,v!206,viiia) -> PC(a~A,v,viiia) + V(_deg~_DEG,a~A,pc,x) mw234b484f_d2d5_4ae8_a077_217c600588d8 #Modifiers(mw2e632a32_3823_4933_95cb_19567cbcc66a, mw2e632a32_3823_4933_95cb_19567cbcc66a)
	mwa14cc09f_d815_4499_9299_642478acc115: VIIIa(_deg~0,ix,pc!203).PC(a~A,v,viiia!203) -> PC(a~A,v,viiia) + VIIIa(_deg~_DEG,ix,pc) mwa2636601_825e_4846_aa2d_c35bd242ec99 #Modifiers(mw8bdbd17d_f542_4b8c_88c6_a82eaf997a43, mw8bdbd17d_f542_4b8c_88c6_a82eaf997a43)
	mw33aec61d_aae4_41f1_8f35_2e2e4bb56597: PC(a~A,v,viiia) + IX(a~A,atiii,viiia!199,x,xi).VIIIa(_deg~0,ix!199,pc) <-> IX(a~A,atiii,viiia!199,x,xi).VIIIa(_deg~0,ix!199,pc!203).PC(a~A,v,viiia!203) mw70d2f292_be41_4999_99cb_9c146808db85,mw0e80d629_98c1_44a6_bd57_3a4027c87b4c #Modifiers(mwedf22864_05a0_40c3_a0d5_ede45a3e7e8f, IXa_VIIIa, mwa4fcfa0c_6944_42fc_8c74_7865f13953c8, mwedf22864_05a0_40c3_a0d5_ede45a3e7e8f, IXa_VIIIa, mwa4fcfa0c_6944_42fc_8c74_7865f13953c8)
	mwc0b0317d_2b0e_490d_bfd5_8719b2ead1ec: IX(a~A,atiii,viiia!199,x,xi).VIIIa(_deg~0,ix!199,pc!203).PC(a~A,v,viiia!203) -> PC(a~A,v,viiia) + IX(a~A,atiii,viiia,x,xi) + VIIIa(_deg~_DEG,ix,pc) mw7aeacec0_be36_49bf_8548_7a3e2b5fe3cb #Modifiers(mwa4fcfa0c_6944_42fc_8c74_7865f13953c8, mwa4fcfa0c_6944_42fc_8c74_7865f13953c8)
	mw5619c52c_ce60_4357_8d45_2c512348ecc2: PC(a~A,v,viiia) + X(a~0,atiii,ix!191,tfpi,v,vii,viii).IX(a~A,atiii,viiia!199,x!191,xi).VIIIa(_deg~0,ix!199,pc) <-> X(a~0,atiii,ix!191,tfpi,v,vii,viii).IX(a~A,atiii,viiia!199,x!191,xi).VIIIa(_deg~0,ix!199,pc!203).PC(a~A,v,viiia!203) mwb63aa5ed_b6d8_4241_9987_54828945aea3,mw4d2fe532_2ccd_42c4_9b4b_759022a87484 #Modifiers(mwedf22864_05a0_40c3_a0d5_ede45a3e7e8f, IXa_VIIIa_X, mwe0bb059d_deaa_45fa_b7dc_ec1c4409c4ca, mwedf22864_05a0_40c3_a0d5_ede45a3e7e8f, IXa_VIIIa_X, mwe0bb059d_deaa_45fa_b7dc_ec1c4409c4ca)
	mw415d69bc_061f_4d57_905d_58fca6bc6463: X(a~0,atiii,ix!191,tfpi,v,vii,viii).IX(a~A,atiii,viiia!199,x!191,xi).VIIIa(_deg~0,ix!199,pc!203).PC(a~A,v,viiia!203) -> PC(a~A,v,viiia) + IX(a~A,atiii,viiia,x,xi) + X(a~0,atiii,ix,tfpi,v,vii,viii) + VIIIa(_deg~_DEG,ix,pc) mw6b555ed1_194e_4fa4_9688_8105aa7c60c0 #Modifiers(mwe0bb059d_deaa_45fa_b7dc_ec1c4409c4ca, mwe0bb059d_deaa_45fa_b7dc_ec1c4409c4ca)
	mw4c020206_4593_4480_b410_d33a9df3298a: X(a~A,atiii,ix,tfpi,v,vii,viii) + VIII(x) <-> X(a~A,atiii,ix,tfpi,v,vii,viii!196).VIII(x!196) mwaa306898_0d0f_4748_b48a_fcd56bdc0b16,mwec1b7289_5544_4c2b_b9f6_bf6524cabda5 #Modifiers(Xa, VIII, mw7a1594c9_f04f_478c_9f5f_ccbe0b95a820, Xa, VIII, mw7a1594c9_f04f_478c_9f5f_ccbe0b95a820)
	mwf122913a_9b0b_4492_8cb6_2dd00c3f6162: X(a~A,atiii,ix,tfpi,v,vii,viii!196).VIII(x!196) -> X(a~A,atiii,ix,tfpi,v,vii,viii) + VIIIa(_deg~0,ix,pc) mw6843129b_7601_452f_be5d_977f7203bfb5 #Modifiers(mw7a1594c9_f04f_478c_9f5f_ccbe0b95a820, mw7a1594c9_f04f_478c_9f5f_ccbe0b95a820)
	mw2b7d93e1_fc1b_4fa0_a03b_4d2b2259d14f: F12(_deg~0) -> F12(_deg~_DEG) mwea0d7c35_f4d2_4205_8c59_11ac05134dde #Modifiers(mwbdb849d8_2b25_4551_8de8_adc8bead2303, mwbdb849d8_2b25_4551_8de8_adc8bead2303)
	mw0ca8823e_ed5a_443a_935b_db3cfb4c01e2: X(a~0,atiii,ix,tfpi,v,vii!193,viii).VII(a~A,tf,x!193) + XI(a~A,atiii,ix,xii) -> VII(a~A,tf,x) + X(a~A,atiii,ix,tfpi,v,vii,viii) + XI(a~A,atiii,ix,xii) mw7be1d52f_926f_47e0_964b_d3303c8453b1 #Modifiers(mw6d041b25_87db_4394_9b8b_7ac61e01f359, mw6591152c_8b5a_4c9b_b095_956988a01ba0, mw6d041b25_87db_4394_9b8b_7ac61e01f359, mw6591152c_8b5a_4c9b_b095_956988a01ba0)
end reaction rules
end model
