###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1502200001', 'http://identifiers.org/biomodels.db/BIOMD0000000636']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/26468202']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/10090']
#@BQB_HAS_PROPERTY:['http://identifiers.org/go/GO:0004016', 'http://identifiers.org/go/GO:0004930', 'http://identifiers.org/mamo/MAMO_0000046', 'http://identifiers.org/go/GO:0090494', 'http://identifiers.org/go/GO:0007212']
#@creatorEmail:'rgutenk@email.arizona.edu'
#@creatorName:'Gutenkunst Ryan'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 78 molecules and 113 reactions. The translated model has 50 molecules and 113 rules'
###
begin model
begin parameters
	mw0060906c_a035_468c_aa1c_130959bcf15a 200.0
	mwffa5af7e_9155_4942_9424_cd94ac5018ed 0.055
	mw3e479c87_36d8_4cda_a0a2_0ee2b658f51a 3.0
	mw0d101277_e2ba_402c_9635_f10e690a9313 1.0
	mwf3c85708_890c_45d1_bcbc_fe90e9ca792f 10.0
	mwfe873584_629a_46c8_aae9_fdacdb9ad266 0.1
	mwd6fae483_ca98_40de_bed9_5e2302f769f3 0.91
	mwd6652286_f31c_4bfd_a885_ed2f2ca149af 0.006
	mw4a930624_fcc1_4d08_8e24_9a0082418629 0.02
	mw7419e1e3_b601_44a8_93ff_e5b31995791e 0.04
	mwe2bf9c41_d94e_4ff4_a573_8ac4a12513b0 1.0
	mw810d8094_3a3e_494e_bd1b_fcd9e8ef1d17 3.0
	mw269c014a_6379_44c3_813b_52d8145506e7 0.0001
	mwc4c3d33d_b2b7_4ab2_a171_1864ea638ec0 0.1
	mw5557cb87_d4fa_44ba_b006_e67b44862136 1.0
	mwe7952ed1_96f3_4d0c_8977_b6a2b4f26665 30.0
	mw2561b5ab_39c9_4453_99d8_f0f37779b63a 10.0
	mw5623544e_e7e1_439f_88d3_3b0cbea8ccf5 30.0
	mwa390f769_ebf1_4023_8af0_1c00e2a9bf82 0.005
	mw0beb6cc4_36bd_4022_8993_29f981652ebe 1.0
	mwb3fdecfc_6465_4e63_888a_7762f542c790 0.0008
	mw19a820fb_1581_4bf1_9577_9e20f3296159 6.4
	mwf1c01e00_be7d_4a3b_af91_3dd9ab9cea62 0.001
	mw34b74798_bd70_4456_a53b_9e1e46bb9750 10.0
	mw6bf18344_b899_4a62_ac8d_5f8bdd4bbe2f 8.0
	mw88c9326a_fbe9_4dd8_aded_b5be3f012691 2.3
	mw4d0140a3_fd9c_4adb_9be0_63d4612400ee 5.0
	mw6af7af00_75ac_4f58_8383_7047a5fb5181 1.0
	mw2226fa14_2b95_45a6_8705_4b38073fc5f7 0.0008
	mw009f9583_4e96_4672_ab71_0ef4b697aa6f 6.4
	mwc44dc346_a522_4680_b81d_77540364e07c 0.001
	mw43aa8259_68fc_4f47_ad18_37eaa0a94b5a 10.0
	mw62c51fcf_c107_4d3c_849e_9b168df54490 7.0
	mwed967767_31e4_4e9e_8117_5372f9f4f79a 3.0
	mwd05b4199_53ad_4807_9a8c_d93ce35be857 60.0
	mwfcfb91ff_a495_41f9_bdff_fcef779112fd 30.0
	mw5175a06e_3927_4993_9242_8f76b0aaf42f 100.0
	mw71a5a1e9_f803_46d7_bf5e_a4965ceef2e0 6.6
	mw13378d99_aa94_4d9d_a73e_9ec3830b6212 200.0
	mw0a87aca4_d8f3_4058_83d0_7addc7e7b981 0.00026
	mwf79c6674_0a76_49e2_973d_6677fa109433 1.0
	mw8deeabf3_8313_4e28_90be_ded2d2f045f3 10.0
	mw535609a4_02d1_42d0_ba4b_dce4b2136617 0.025
	mw36eae1b1_84f0_42c3_ad0d_d27aa571346d 0.000346
	mwad5ebb51_1d46_40a7_b8d6_13ba4a466b92 1.0
	mw1b9e5266_efac_4696_a213_80f9f83d948a 0.0009
	mwa27c20d8_b6ed_4617_a6f6_9af2752d3a33 2.0
	mw0dd72d64_80e1_4f76_a444_fd175dbfab0c 30.0
	mwa4148cd1_a298_447c_aea8_226688c3f526 2.0
	mw1db20a7e_3972_4c3a_83c0_c6fcd7c9cb45 0.0001
	mw4e2575eb_3641_422c_b836_d854958d4d1e 8.0
	mw77fab49b_2ba6_4efe_9342_285f4fd3b7fa 0.01
	mw05f4bef4_5e8d_4a92_bb74_cc0bb4c0260e 1.0
	mw36cb62c6_0b3c_4d1b_9001_3b37aa7477e2 9.0
	mwac1bc66c_2623_47e6_a76d_c1629d962be5 10.0
	mwd1b16e73_4fcb_4e4c_9804_3137259ba749 1e-06
	mw0b1ccae3_37fa_4a23_a817_cd8fc458dc79 0.1
	mw6f753a0e_a7ec_4b4b_bcfc_edb95a3f1296 2.0
	mwf633f298_303f_46d1_b644_ae07ae366f45 3.0
	mw8186cb1d_66c4_4855_bcbb_82d75173ae8a 20.0
	mw789c453f_f13d_467f_8f02_d5a714cda15d 0.084
	mw98b63d59_8744_4e8c_8653_68ae1eb4ad40 1.0
	mwaa3af366_350e_4f18_936b_6372dc484f82 0.0004
	mwe4474191_0c92_406c_a6f5_4a167f541d36 0.25
	mw17d612a2_c9d5_4251_8122_5f037fc630e3 0.00105
	mwc728d91d_7616_43db_bd1d_55e49e9c026a 0.125
	mwdb2a670f_13fb_4bda_8c72_d706c6bc37e9 2.8125e-05
	mw65cae8fe_0eac_4792_88bf_2dfb441030e5 0.5
	mw515fcf69_b724_40d9_84ba_5f92d75ae5a7 0.00015
	mwb0a6bd5e_87a0_425c_a5c7_ea69903e0bf3 10.0
	mw034d8151_fae1_4738_b675_39c38a58118d 0.022
	mw80292f32_fd53_4b5d_872a_e21c2d90c52a 0.1
	mw066c69e2_66da_4621_9180_bce71b7077c3 12.0
	mwefa9bb47_f13f_4a21_a62d_a4debcf7b52b 200.0
	mwce0df80f_1563_453d_b33d_a88f6b2c93b7 200.0
	mw5301f7f5_60df_4eb9_ba3b_81e6519d1cbb 5.0
	mw5f50df8c_48a1_4c29_9e24_cca9a1242ee5 0.006
	mw86fd6328_2ac3_4dc0_97a2_698cf44eed12 0.00175
	mw1a6a8649_d7cb_4379_983a_cca2acac3112 2.5
	mw9c2302f8_3d47_4247_a338_a02c53fc5331 0.0001
	mwb56b5ab7_47cc_4fbc_b68b_dfdc6be6d7a4 0.00055
	mwa1bc2233_5bb9_4135_88ed_bb51640faec8 5.625e-05
	mw00f3118f_5d5a_48d0_bcc4_749d5f9dc73a 0.000175
	mw894b221b_266d_4277_ac01_83579ed103e6 0.006
	mw2f090a45_946b_4587_a3e3_b29f3bb5c6ae 100.0
	mw68039b16_b516_4fba_bedd_d4bbc1a23a02 9.1
	mw3a56b314_299f_48d2_a179_97bf6a30f38f 0.006
	mweb9b200d_dd29_4618_9e73_cddabb464215 1000.0
	mw2037ae7c_b1dc_4517_a61c_88a1f2bdcd12 1.0
	mw690a2134_fb59_4061_be3b_929335ef629b 0.005
	mwc0a23657_7f6c_4e0d_9f11_06b3ab5126f0 0.3
	mw1cc91fa1_3a8e_456d_a05d_6ddd5df00d00 0.1
	mwe5d8a08f_c74e_4618_892c_41c71a57cade 0.1
	mw49e66b9c_64bd_428a_9090_15e4132e9781 0.00037
	mw72ceb3da_d538_4f25_8e69_f322eb0b5e57 0.00105
	mw541807fb_7d9f_4788_9f21_cc62846b5826 6.25e-05
	mwb93138ce_a80b_4b26_b927_6b4a00651b64 0.0003
	mw9510e553_a7fd_4c9a_b284_19b3cc01ae7d 7.5e-05
	mw448bd49f_40ad_46c9_81f6_3494057dc37d 0.005
	mwa466eec8_9bc0_44d5_8027_d5925b378429 1.0
	mwb17941e5_1ad5_42b9_98c6_e62b1a697dbb 0.005
	mw8e4e88b6_60b3_43bd_8f5c_923712ee64ea 1.0
	mwe79f507b_73c9_4056_ae91_6244dcbc49bb 0.1
	mw26206710_ba98_4010_9e5b_c3aae2ce29ec 1.0
	mwb494aae2_da19_4ac0_96e2_0dcd9440edc2 1.0
	mwdcc4ce84_732d_4f5b_84e2_e5b93617200b 0.2
	mw0a255671_d9ca_4384_a153_ce17e1111453 0.2
	mwe737a297_e5be_46ed_af75_ccc7428c3977 0.001
	mw1ef56a9a_9d9b_4490_8fcd_53b7e50bf5d6 50.0
	mwc52aebc2_571c_4f96_84ee_0613ae73db89 0.01
	mw649b47b3_4c3a_4ac9_ae94_5c38ccf81e39 0.002
	mwcd307ee9_33da_4303_9c28_644ad2d1630c 0.1
	mwddcb8d81_9f5a_457e_a54c_a0c1b1f29f0b 0.9
	mw6ae3f7a6_bf58_475e_930e_6bf7a79f3761 5.0
	mw9330e49a_b214_4807_b614_4241a4a12c43 0.01
	mwc911f28c_b62f_4269_84ed_d852f6da24f9 0.01
	mw8db06baf_d8bb_4a1a_b415_2d51fa1e53ba 0.25
	mwcabc0868_2435_4850_964b_e3ddee39f5ad 30.0
	mw326e0065_b4f6_41ae_b1d0_66092dc5ebb2 0.13
	mwca52f04a_bb5f_4d3f_ba6d_939bbb3895b9 2.0
	mwdad9965c_2334_481f_8544_f1a81385a28e 0.005
	mw3fc2c1ed_0097_4f7f_bcd5_904dc6ad5a56 0.005
	mwc23d8bf6_2a60_4760_8bf5_c1bab432ab52 1.0
	mw858f28f3_086a_436b_ba23_4fc7372c8884 1.0
	DAdip_steepness 100.0
	DAdip_minimum 0.001
	DAdip_startTime 10.0
	DAdip_duration 1.0
	DApeak_steepness 100.0
	DApeak_maximum 1500.0
	DApeak_startTime 10.0
	DApeak_duration 1.0
	DA_basal 10.0
	Adn_basal 150.0
	Adnpeak_maximum 1000.0
	Adnpeak_k1 0.01
	Adnpeak_k2 0.3
	Adnpeak_startTime 2.0
	DAdip_maximum (10.0)
	DApeak_minimum (10.0)
	ModelValue_139 (150.0)
	ModelValue_141 (0.01)
	ModelValue_142 (0.3)
	ModelValue_140 (1000.0)
	ModelValue_145 (0.859689312097976)
	ModelValue_147 (0)
	ModelValue_146 (2.0)
	ModelValue_144 (11.7282668333178)
	ModelValue_138 (10.0)
	ModelValue_129 (1.0)
	ModelValue_127 (10.0)
	ModelValue_126 (0.001)
	ModelValue_124 (0)
	ModelValue_128 (10.0)
	ModelValue_125 (100.0)
	ModelValue_136 (1.0)
	ModelValue_134 (1500.0)
	ModelValue_133 (10.0)
	ModelValue_131 (0)
	ModelValue_135 (10.0)
	ModelValue_132 (100.0)
	DAdip_present 0
	DApeak_present 0
	Adnpeak_present 0
end parameters
begin molecule types
	#^ bqbiol:isVersionOf uniprot:P49615
	CDK5()
	#^ bqbiol:hasPart chebi:CHEBI:29108, chebi:CHEBI:15996, chebi:CHEBI:15422, uniprot:P84309, uniprot:B2RSH2
	AC5CaGaiGTPmATP()
	#^ bqbiol:is chebi:CHEBI:18243
	DA(d2r)
	#^ bqbiol:hasPart uniprot:P62874, uniprot:P63213
	Gbgi(gaig)
	#^ bqbiol:hasPart chebi:CHEBI:15996, chebi:CHEBI:15422, uniprot:P84309, uniprot:Q8CGK7, uniprot:B2RSH2
	AC5GaolfGTPGaiGTPmATP()
	#^ bqbiol:isVersionOf uniprot:Q8CA95
	PDE10()
	#^ bqbiol:hasPart uniprot:Q76MZ3, uniprot:Q6P1F6, uniprot:P63330
	B56PP2A(p~P~0,pka)
	#^ bqbiol:hasPart chebi:CHEBI:18243, uniprot:P61168, uniprot:B2RSH2, uniprot:P62874, uniprot:P63213
	D2RDAGi()
	#^ bqbiol:isPartOf interpro:IPR006186
	#^ bqbiol:hasPart uniprot:P63328, uniprot:P48453, uniprot:P48455, uniprot:Q63810, uniprot:Q63811
	PP2B(cam)
	#^ bqbiol:hasPart uniprot:P61168, uniprot:B2RSH2, uniprot:P62874, uniprot:P63213
	D2RGi()
	#^ bqbiol:isVersionOf uniprot:Q60829
	D32p34(pp1)
	#^ bqbiol:hasPart chebi:CHEBI:17489, uniprot:Q8CA95
	PDE10mcAMP()
	#^ bqbiol:is uniprot:P84309
	AC5(ca,gaig,gaolfg)
	#^ bqbiol:isHomologTo uniprot:P62874
	Gbgolf(gaolfg)
	#^ bqbiol:is chebi:CHEBI:29108
	Ca(ac5,b72pp2a,cam)
	GaolfG(ac5,dp~DP~0,gbgolf,tp~TP~0)
	#^ bqbiol:is uniprot:Q60613
	A2AR(adn)
	#^ bqbiol:isVersionOf chebi:CHEBI:16335
	Adn(a2ar)
	#^ bqbiol:hasPart chebi:CHEBI:17489, uniprot:Q01063
	PDE4mcAMP()
	#^ bqbiol:isVersionOf uniprot:Q8CA95
	PDE10c()
	#^ bqbiol:isVersionOf uniprot:Q01063
	PDE4()
	#^ bqbiol:is chebi:CHEBI:15422
	ATP()
	GaiG(ac5,dp~DP~0,gbgi,tp~TP~0)
	#^ bqbiol:hasPart chebi:CHEBI:15422, uniprot:P84309
	AC5mATP()
	#^ bqbiol:hasPart uniprot:P05132, uniprot:P68181, uniprot:Q60829
	PKAcmD32()
	#^ bqbiol:isPartOf interpro:IPR006186
	#^ bqbiol:hasPart uniprot:Q76MZ3, uniprot:Q6P1F6, uniprot:P63330
	B72PP2A(ca)
	#^ bqbiol:hasPart chebi:CHEBI:17489, uniprot:P05132, uniprot:P68181, uniprot:Q9DBC7, uniprot:P12849
	PKAcAMP4()
	#^ bqbiol:hasPart chebi:CHEBI:16335, uniprot:Q60613, uniprot:P62874, uniprot:Q8CGK7, uniprot:P63213
	A2ARAdnGolf()
	#^ bqbiol:hasPart uniprot:P05132, uniprot:P68181, uniprot:Q9DBC7, uniprot:P12849
	PKA(PKAreg~PKAreg~0,b56pp2a,c~C~0,camp,d32p75,totalActivePKA~totalActivePKA~0)
	#^ bqbiol:hasPart uniprot:Q60613, uniprot:P62874, uniprot:Q8CGK7, uniprot:P63213
	A2ARGolf()
	#^ bmbiol:is chebi:CHEBI:16027
	AMP()
	#^ bqbiol:hasPart uniprot:P49615, uniprot:Q60829
	CDK5mD32()
	#^ bqbiol:hasPart chebi:CHEBI:17489, uniprot:Q8CA95
	PDE10cmcAMP()
	#^ bqbiol:isPartOf interpro:IPR006186
	#^ bqbiol:hasPart uniprot:P62137, uniprot:Q9ERT9
	PP1(d32p34)
	#^ bqbiol:isVersionOf uniprot:P61168
	D2R(da)
	#^ bqbiol:is uniprot:P62204
	CaM(ca,ca,pp2b)
	#^ bqbiol:hasPart chebi:CHEBI:15996, chebi:CHEBI:15422, uniprot:P84309, uniprot:B2RSH2
	AC5GaiGTPmATP()
	#^ bqbiol:is chebi:CHEBI:17489
	cAMP(pka)
	#^ bqbiol:hasPart chebi:CHEBI:29108, uniprot:Q76MZ3, uniprot:Q6P1F6, uniprot:P63330, uniprot:Q60829
	B72PP2ACamD32p34()
	#^ bqbiol:hasPart chebi:CHEBI:29108, chebi:CHEBI:15996, chebi:CHEBI:15422, uniprot:P84309, uniprot:Q8CGK7, uniprot:B2RSH2
	AC5CaGaolfGTPGaiGTPmATP()
	#^ bqbiol:hasPart uniprot:Q76MZ3, uniprot:Q6P1F6, uniprot:P63330, uniprot:Q60829
	B56PP2AmD32p75(p~P~0)
	#^ bqbiol:hasPart chebi:CHEBI:15996, chebi:CHEBI:15422, uniprot:P84309, uniprot:Q8CGK7
	AC5GaolfGTPmATP()
	#^ bqbiol:hasPart chebi:CHEBI:29108, chebi:CHEBI:15422, uniprot:P84309
	AC5CamATP()
	#^ bqbiol:hasPart chebi:CHEBI:29108, chebi:CHEBI:15996, chebi:CHEBI:15422, uniprot:P84309, uniprot:Q8CGK7
	AC5CaGaolfGTPmATP()
	#^ bqbiol:isVersionOf uniprot:Q60829
	D32p75(pka)
	#^ bqbiol:hasPart uniprot:P63328, uniprot:P48453, uniprot:P48455, uniprot:Q60829
	PP2BcmD32p34()
	#^ bqbiol:hasPart uniprot:Q76MZ3, uniprot:Q6P1F6, uniprot:P63330, uniprot:Q60829
	B72PP2AmD32p34()
	#^ bqbiol:isVersionOf uniprot:Q60829
	DARPP32()
	#^ bqbiol:hasPart chebi:CHEBI:29108, uniprot:Q76MZ3, uniprot:Q6P1F6, uniprot:P63330, uniprot:Q60829
	B72PP2ACamD32p75()
	#^ bqbiol:hasPart uniprot:Q76MZ3, uniprot:Q6P1F6, uniprot:P63330, uniprot:Q60829
	B72PP2AmD32p75()
end molecule types
begin seed species
	GaiG(ac5,dp~0,gbgi,tp~TP) 6.114573515315179e+16 # (101.537255319083 * 1e-09)mol/L * 6.022e23/mol *1.0L #GaiGTP #mwa2c44a01_28c9_4dbd_b034_364f9b5b6cc3
	GaolfG(ac5,dp~DP,gbgolf,tp~0) 32015236892362.223 #original 0.0531637942417174substance/L #GaolfGDP #mwfed0682b_39f1_4b09_94e8_c45a51744092
	Gbgolf(gaolfg) 1.4340210230567112e+17 #original 238.130359192413substance/L #Gbgolf #mwaf471bc1_f98a_4115_b0ee_45c189ea20b5
	GaolfG(ac5,dp~0,gbgolf,tp~TP) 2.4421427366810976e+16 #original 40.5536821102806substance/L #GaolfGTP #mw8e34c23f_1891_4dc9_8f97_dc2f12a1706c
	GaolfG(ac5,dp~DP,gbgolf!261,tp~0).Gbgolf(gaolfg!261) 3.366192871269908e+17 #original 558.982542555614substance/L #Golf #mw351f6cee_3e64_4b8e_8e60_24b1aca99a92
	A2ARGolf() 2.1720594436980013e+17 #original 360.687386864497substance/L #A2ARGolf #mw0b46978f_b522_4cde_97f0_574cd7dbbae7
	cAMP(pka) 1.0515995635460478e+17 #original 174.626297500174substance/L #cAMP #mw1c97b02d_169a_4eb8_bc84_1be57c51a255
	$Ca(ac5,b72pp2a,cam) 3.613200000000001e+16 #original 60.0substance/L #Ca #mwccd3a17c_e207_4663_9b16_327b78882497
	AC5(ca,gaig,gaolfg) 7750927734690.856 #original 0.0128710191542525substance/L #AC5 #mw724f1afe_8032_40ae_96ca_808ab7b8b943
	GaolfG(ac5!264,dp~0,gbgolf,tp~TP).AC5(ca,gaig,gaolfg!264) 425766587554634.8 #original 0.70701857780577substance/L #AC5GaolfGTP #mwfe9ed415_d5af_469c_a549_d8981f1eb01f
	CaM(ca,ca,pp2b) 3.4698431588726144e+18 #original 5761.94480051912substance/L #CaM #mw4b358131_010c_4545_ac4a_13a6c8bc34c4
	Ca(ac5,b72pp2a,cam!255).CaM(ca!255,ca,pp2b) 1.503154671681762e+17 #original 249.610539967081substance/L #CaMCa2 #mw65a14789_ffcf_4bfd_9d53_d2eb2f4d0896
	Ca(ac5,b72pp2a,cam!255).CaM(ca!255,ca!266,pp2b).Ca(ac5,b72pp2a,cam!266) 1602199635651955.8 #original 2.66057727607432substance/L #CaMCa4 #mw8a4a0733_64dd_4474_9aaf_7d750b27ae5b
	PDE4() 7.612726094256675e+17 #original 1264.15245670154substance/L #PDE4 #mw219e8fae_a38b_4620_8726_e6bd1829a351
	PKA(PKAreg~0,b56pp2a,c~0,camp,d32p75,totalActivePKA~0) 6.301332743131025e+17 #original 1046.38537747111substance/L #PKA #mwc783c5e7_7bc8_425a_9bb6_1f01d463365c
	PKA(PKAreg~0,b56pp2a,c~0,camp!257,d32p75,totalActivePKA~0).cAMP(pka!257) 2.860983856249074e+16 #original 47.508865098789substance/L #PKAcAMP2 #mw74e54eed_0d25_4fb0_b677_1192f238c03b
	PKAcAMP4() 1728626442367608.5 #original 2.87051883488477substance/L #PKAcAMP4 #mwffd5a553_8e03_443d_a67e_0cf39d03f89f
	PKA(PKAreg~PKAreg,b56pp2a,c~0,camp,d32p75,totalActivePKA~0) 6.216826068203788e+16 #original 103.235238595214substance/L #PKAreg #mwcfcf2e7f_907a_4d25_812f_6c10a7293859
	PKA(PKAreg~0,b56pp2a,c~C,camp,d32p75,totalActivePKA~0) 6697815458715029.0 #original 11.1222442024494substance/L #PKAc #mw68d3f409_9462_4515_8c07_bc105fa0eaf1
	PP2B(cam) 8560825676444113.0 #original 14.2159177622785substance/L #PP2B #mw25023179_9334_438e_bf3e_4e850f84406a
	Ca(ac5,b72pp2a,cam!255).CaM(ca!255,ca!266,pp2b!256).Ca(ac5,b72pp2a,cam!266).PP2B(cam!256) 2.4102785695638077e+17 #original 400.245527991333substance/L #PP2Bc #mw4855b1cd_d7bc_4072_9736_dca30bbe448d
	CaM(ca,ca,pp2b!256).PP2B(cam!256) 1.64027592601648e+18 #original 2723.80592164809substance/L #PP2BCaM #mwfaf786e2_00b7_4e0c_b164_5aa1f4ef6356
	Ca(ac5,b72pp2a,cam!255).CaM(ca!255,ca,pp2b!256).PP2B(cam!256) 5.184309003623714e+17 #original 860.894886021872substance/L #PP2BCaMCa2 #mwd1171b65_ed6c_4413_bf47_5ed80038a7bd
	DARPP32() 2.215114466698709e+19 #original 36783.7008751031substance/L #DARPP32 #mw24435476_9c30_4878_b26f_4b3c5a0685c6
	PKAcmD32() 1368724668611177.8 #original 2.27287391001524substance/L #PKAcmD32 #mw4179e1ff_9035_4c67_a67c_099e25beb9b0
	D32p34(pp1) 2016726046561845.2 #original 3.34893066516414substance/L #D32p34 #mw2f3e9c55_e57f_416e_b4b1_cc49a26192c0
	B72PP2A(ca) 1.7165394394346826e+17 #original 285.044742516553substance/L #B72PP2A #mw522cacf1_5e61_4b95_8742_cf61cb824893
	PKA(PKAreg~0,b56pp2a!265,c~C,camp,d32p75,totalActivePKA~0).B56PP2A(p~0,pka!265) 2.9787298235711372e+16 #original 49.4641285880295substance/L #PKAcmB56PP2A #mwe8cc261d_af39_4e88_8a65_a4994dcea2ff
	B56PP2A(p~P,pka) 4.9645497050641856e+17 #original 824.402142986414substance/L #B56PP2Ap #mw9417144e_14b1_40d9_bd4b_ccd9f4714305
	CDK5() 1.4223206800673184e+17 #original 236.187426115463substance/L #CDK5 #mw32351ce4_eaaf_4827_8efa_342224548d8a
	PP1(d32p34) 2.2516650063249914e+17 #original 373.906510515608substance/L #PP1 #mw06380287_79c9_4f85_aed6_fa34e7bcdff1
	CDK5mD32() 9.4172793199327e+17 #original 1563.81257388454substance/L #CDK5mD32 #mw0130a500_18e9_470f_9fac_70af44dc4a9e
	D32p75(pka) 5.908398856507688e+18 #original 9811.3564538487substance/L #D32p75 #mw1184c368_03fc_435a_9086_dc6ed3067935
	PKA(PKAreg~0,b56pp2a,c~C,camp,d32p75!263,totalActivePKA~0).D32p75(pka!263) 2.4314422318998396e+16 #original 40.3759918947167substance/L #PKAcD32p75 #mwb320746f_6a8c_4c8b_ae55_23db454339d8
	Ca(ac5,b72pp2a!259,cam).B72PP2A(ca!259) 1.0299236636604676e+16 #original 17.1026845509875substance/L #B72PPA2Ca #mw3fcd1ec2_a459_49d4_89f7_361e276096d6
	B56PP2AmD32p75(p~P) 2.7060537105108742e+17 #original 449.361293675004substance/L #B56PP2ApmD32p75 #mw3a3e53fb_bbbf_4433_9f75_a12610dbc312
	B72PP2AmD32p75() 1.820711384581999e+17 #original 302.34330531086substance/L #B72PP2AmD32p75 #mw0459271f_3b39_40a4_948f_aed773482cfc
	B72PP2ACamD32p75() 6736632122670651.0 #original 11.1867022960323substance/L #B72PP2ACamD32p75 #mw9bfd7713_4c48_492c_8583_006bf1b54a1b
	PP1(d32p34!258).D32p34(pp1!258) 3.7703349936750086e+17 #original 626.093489484392substance/L #PP1D32p34 #mwc57c3c2e_69d5_4336_aff5_d1f429420df2
	PP2BcmD32p34() 504490988325004.9 #original 0.837746576428105substance/L #PP2BcmD32p34 #mwcf1bb70c_9d0b_4e82_b58a_6f8e73208af9
	B72PP2AmD32p34() 4.790476305571461e+16 #original 79.5495899297818substance/L #B72PP2AmD32p34 #mwa9e7a93f_2393_4220_9ac8_79a02d068dc3
	Adn(a2ar) 9.033000000000002e+16 #original 150.0substance/L #Adn #mwbe974953_e869_4622_b4a8_745555c8d7fd
	Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig,gaolfg) 516998131242.90967 #original 0.000858515661313367substance/L #AC5Ca #mw7df45520_98cc_4c0b_91a7_c6e7297de98a
	GaolfG(ac5!264,dp~0,gbgolf,tp~TP).Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig,gaolfg!264) 28423879247050.406 #original 0.0472000651727838substance/L #AC5CaGaolfGTP #mw42919ead_5972_4151_85ac_fcc88ca105a6
	GaiG(ac5!262,dp~0,gbgi,tp~TP).AC5(ca,gaig!262,gaolfg) 1121790003048076.2 #original 1.86281966630368substance/L #AC5GaiGTP #mw29ba9e7c_6865_4817_8775_be2dbc29651e
	GaiG(ac5!262,dp~0,gbgi,tp~TP).Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig!262,gaolfg) 74828056871316.88 #original 0.124257816126398substance/L #AC5CaGaiGTP #mwed1b3928_8d78_44d1_aee7_9d11d6437cfc
	B56PP2A(p~0,pka) 2.142538695558492e+17 #original 355.78523672509substance/L #B56PP2A #mw081c9f7b_011e_440f_971d_d0316d2a1e6c
	B56PP2AmD32p75(p~0) 1.9329849065093504e+17 #original 320.987198025465substance/L #B56PP2AmD32p75 #mwde741b91_d5bf_44a9_ad45_404d7259d051
	B72PP2ACamD32p34() 2874285783341914.0 #original 4.77297539578531substance/L #B72PP2ACamD32p34 #mw8825a609_0983_4fb4_a264_e2f7e43d17b3
	PDE4mcAMP() 4.431273905743308e+17 #original 735.847543298457substance/L #PDE4mcAMP #mwf46d3666_f0f3_4f05_9603_d7e6bb69005e
	GaiG(ac5!262,dp~0,gbgi,tp~TP).GaolfG(ac5!264,dp~0,gbgolf,tp~TP).AC5(ca,gaig!262,gaolfg!264) 17316504583167.707 #original 0.0287554044888205substance/L #AC5GaolfGTPGaiGTP #mwd794c746_c826_4ba1_9e09_a9d1e122d925
	GaiG(ac5!262,dp~0,gbgi,tp~TP).GaolfG(ac5!264,dp~0,gbgolf,tp~TP).Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig!262,gaolfg!264) 1154842829459.2742 #original 0.00191770645875004substance/L #AC5CaGaolfGTPGaiGTP #mw2badefa3_32e8_4b66_9e69_245d9ec74e33
	D2R(da) 7.09770193733612e+17 #original 1178.62868437996substance/L #D2R #mwf82770b9_766a_4c4e_851a_d76da19e8517
	DA(d2r!267).D2R(da!267) 4554038546154559.0 #original 7.56233567943301substance/L #D2RDA #mw9d5c5c9d_301d_4e43_ba7b_7d21ccbdc2c2
	D2RGi() 3.069255971341426e+17 #original 509.673857745172substance/L #D2RGi #mwd86ce0dc_7329_4b27_9de0_ee6bffee3083
	GaiG(ac5,dp~DP,gbgi!260,tp~0).Gbgi(gaig!260) 9.500433198889171e+17 #original 1577.62092309684substance/L #Gi #mwd8ea533a_c66e_4de4_8c5c_0d4201d8c8a2
	D2RDAGi() 1.8315017058608918e+17 #original 304.135122195432substance/L #D2RDAGi #mwe4e36b8e_18b8_4c76_bd46_13614b71da5c
	Gbgi(gaig) 3.6648091239085005e+17 #original 608.570096962554substance/L #Gbgi #mwb80e4fa1_4849_4ed5_b3b0_3e3025c61ad8
	GaiG(ac5,dp~DP,gbgi,tp~0) 180570985994691.3 #original 0.299852185311676substance/L #GaiGDP #mw9bcba6bc_9788_4f7f_afb5_1c8f3b33c3d1
	DA(d2r) 6022000000000000.0 #original 10.0substance/L #DA #mw3e1a2fbf_37b1_490c_9528_6cb6bbf11b21
	PDE10c() 453190484065033.2 #original 0.752558093764585substance/L #PDE10c #mw1041345b_f015_436c_9eff_98211008aa1c
	PDE10() 1.3375314406487254e+17 #original 222.10751256206substance/L #PDE10 #mw3d9e6efb_8e12_49c9_a87f_e067914b951d
	PDE10mcAMP() 4.671363265411192e+17 #original 775.716251313715substance/L #PDE10mcAMP #mw6e845d87_603e_4463_874d_866f554303df
	PDE10cmcAMP() 857338909942945.8 #original 1.42367803045989substance/L #PDE10cmcAMP #mw1f3b8982_3b8c_42b6_8b0f_49b037cbda43
	$ATP() 3.011e+21 #original 5000000.0substance/L #ATP #mw46dccec6_6f0f_40f6_a10c_2f34ae7a005a
	AC5GaolfGTPGaiGTPmATP() 4332295638924197.0 #original 7.19411431239488substance/L #AC5GaolfGTPGaiGTPmATP #mw0a10f9cb_3f4b_4bfa_ace9_0ecd2bd74b5e
	AC5GaiGTPmATP() 2.806110412136513e+17 #original 465.976488232566substance/L #AC5GaiGTPmATP #mw2075d2cf_955e_4150_98b8_847103c53845
	AC5GaolfGTPmATP() 1.0673898974015122e+17 #original 177.248405413735substance/L #AC5GaolfGTPmATP #mw166e3335_56c3_41ef_af0f_b583860991c1
	AC5mATP() 1938799384212587.5 #original 3.21952737331881substance/L #AC5mATP #mw7086a13a_619e_4069_b163_d8a05fc55f42
	AC5CaGaolfGTPmATP() 7115893208594498.0 #original 11.8164948664804substance/L #AC5CaGaolfGTPmATP #mwbae3bd11_0ab4_4587_a931_9c5dc5e777ba
	AC5CaGaiGTPmATP() 1.870736069171265e+16 #original 31.0650293784667substance/L #AC5CaGaiGTPmATP #mw56dff932_134c_4d88_a611_daad00623fd0
	AC5CaGaolfGTPGaiGTPmATP() 288819300083566.7 #original 0.479606941354312substance/L #AC5CaGaolfGTPGaiGTPmATP #mw07c7392b_8d89_4b94_97c5_59f7e256b6f2
	AC5CamATP() 129253022670796.72 #original 0.214634710512781substance/L #AC5CamATP #mw619502c3_e319_4e29_a677_b2b5f74fc2cf
	A2ARAdnGolf() 2.541266619753805e+16 #original 42.199711387476substance/L #A2ARAdnGolf #A2ARAdnGolf
	Adn(a2ar!268).A2AR(adn!268) 2.326730480880802e+17 #original 386.371717183793substance/L #A2ARAdn #A2ARAdn
	A2AR(adn) 1.2690834134458173e+17 #original 210.741184564234substance/L #A2AR #A2AR
	PKA(PKAreg~0,b56pp2a,c~C,camp,d32p75,totalActivePKA~totalActivePKA) 3.78538383630395e+16 #original 62.8592467004969substance/L #totalActivePKA #totalActivePKA
end seed species
begin observables
	Species GaiGTP GaiG(ac5,dp~0,gbgi,tp~TP) #GaiGTP
	Species GaolfGDP GaolfG(ac5,dp~DP,gbgolf,tp~0) #GaolfGDP
	Species Gbgolf Gbgolf(gaolfg) #Gbgolf
	Species GaolfGTP GaolfG(ac5,dp~0,gbgolf,tp~TP) #GaolfGTP
	Species Golf GaolfG(ac5,dp~DP,gbgolf!261,tp~0).Gbgolf(gaolfg!261) #Golf
	Species A2ARGolf A2ARGolf() #A2ARGolf
	Species cAMP cAMP(pka) #cAMP
	Species Ca Ca(ac5,b72pp2a,cam) #Ca
	Species AC5 AC5(ca,gaig,gaolfg) #AC5
	Species AC5GaolfGTP GaolfG(ac5!264,dp~0,gbgolf,tp~TP).AC5(ca,gaig,gaolfg!264) #AC5GaolfGTP
	Species CaM CaM(ca,ca,pp2b) #CaM
	Species CaMCa2 Ca(ac5,b72pp2a,cam!255).CaM(ca!255,ca,pp2b) #CaMCa2
	Species CaMCa4 Ca(ac5,b72pp2a,cam!255).CaM(ca!255,ca!266,pp2b).Ca(ac5,b72pp2a,cam!266) #CaMCa4
	Species PDE4 PDE4() #PDE4
	Species PKA PKA(PKAreg~0,b56pp2a,c~0,camp,d32p75,totalActivePKA~0) #PKA
	Species PKAcAMP2 PKA(PKAreg~0,b56pp2a,c~0,camp!257,d32p75,totalActivePKA~0).cAMP(pka!257) #PKAcAMP2
	Species PKAcAMP4 PKAcAMP4() #PKAcAMP4
	Species PKAreg PKA(PKAreg~PKAreg,b56pp2a,c~0,camp,d32p75,totalActivePKA~0) #PKAreg
	Species PKAc PKA(PKAreg~0,b56pp2a,c~C,camp,d32p75,totalActivePKA~0) #PKAc
	Species PP2B PP2B(cam) #PP2B
	Species PP2Bc Ca(ac5,b72pp2a,cam!255).CaM(ca!255,ca!266,pp2b!256).Ca(ac5,b72pp2a,cam!266).PP2B(cam!256) #PP2Bc
	Species PP2BCaM CaM(ca,ca,pp2b!256).PP2B(cam!256) #PP2BCaM
	Species PP2BCaMCa2 Ca(ac5,b72pp2a,cam!255).CaM(ca!255,ca,pp2b!256).PP2B(cam!256) #PP2BCaMCa2
	Species DARPP32 DARPP32() #DARPP32
	Species PKAcmD32 PKAcmD32() #PKAc*D32
	Species D32p34 D32p34(pp1) #D32p34
	Species B72PP2A B72PP2A(ca) #B72PP2A
	Species PKAcmB56PP2A PKA(PKAreg~0,b56pp2a!265,c~C,camp,d32p75,totalActivePKA~0).B56PP2A(p~0,pka!265) #PKAc*B56PP2A
	Species B56PP2Ap B56PP2A(p~P,pka) #B56PP2Ap
	Species CDK5 CDK5() #CDK5
	Species PP1 PP1(d32p34) #PP1
	Species CDK5mD32 CDK5mD32() #CDK5*D32
	Species D32p75 D32p75(pka) #D32p75
	Species PKAcD32p75 PKA(PKAreg~0,b56pp2a,c~C,camp,d32p75!263,totalActivePKA~0).D32p75(pka!263) #PKAcD32p75
	Species B72PPA2Ca Ca(ac5,b72pp2a!259,cam).B72PP2A(ca!259) #B72PPA2Ca
	Species B56PP2ApmD32p75 B56PP2AmD32p75(p~P) #B56PP2Ap*D32p75
	Species B72PP2AmD32p75 B72PP2AmD32p75() #B72PP2A*D32p75
	Species B72PP2ACamD32p75 B72PP2ACamD32p75() #B72PP2ACa*D32p75
	Species PP1D32p34 PP1(d32p34!258).D32p34(pp1!258) #PP1D32p34
	Species PP2BcmD32p34 PP2BcmD32p34() #PP2Bc*D32p34
	Species B72PP2AmD32p34 B72PP2AmD32p34() #B72PP2A*D32p34
	Species Adn Adn(a2ar) #Adn
	Species AMP AMP() #AMP
	Species AC5Ca Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig,gaolfg) #AC5Ca
	Species AC5CaGaolfGTP GaolfG(ac5!264,dp~0,gbgolf,tp~TP).Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig,gaolfg!264) #AC5CaGaolfGTP
	Species AC5GaiGTP GaiG(ac5!262,dp~0,gbgi,tp~TP).AC5(ca,gaig!262,gaolfg) #AC5GaiGTP
	Species AC5CaGaiGTP GaiG(ac5!262,dp~0,gbgi,tp~TP).Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig!262,gaolfg) #AC5CaGaiGTP
	Species B56PP2A B56PP2A(p~0,pka) #B56PP2A
	Species B56PP2AmD32p75 B56PP2AmD32p75(p~0) #B56PP2A*D32p75
	Species B72PP2ACamD32p34 B72PP2ACamD32p34() #B72PP2ACa*D32p34
	Species PDE4mcAMP PDE4mcAMP() #PDE4*cAMP
	Species AC5GaolfGTPGaiGTP GaiG(ac5!262,dp~0,gbgi,tp~TP).GaolfG(ac5!264,dp~0,gbgolf,tp~TP).AC5(ca,gaig!262,gaolfg!264) #AC5GaolfGTPGaiGTP
	Species AC5CaGaolfGTPGaiGTP GaiG(ac5!262,dp~0,gbgi,tp~TP).GaolfG(ac5!264,dp~0,gbgolf,tp~TP).Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig!262,gaolfg!264) #AC5CaGaolfGTPGaiGTP
	Species D2R D2R(da) #D2R
	Species D2RDA DA(d2r!267).D2R(da!267) #D2RDA
	Species D2RGi D2RGi() #D2RGi
	Species Gi GaiG(ac5,dp~DP,gbgi!260,tp~0).Gbgi(gaig!260) #Gi
	Species D2RDAGi D2RDAGi() #D2RDAGi
	Species Gbgi Gbgi(gaig) #Gbgi
	Species GaiGDP GaiG(ac5,dp~DP,gbgi,tp~0) #GaiGDP
	Species DA DA(d2r) #DA
	Species PDE10c PDE10c() #PDE10c
	Species PDE10 PDE10() #PDE10
	Species PDE10mcAMP PDE10mcAMP() #PDE10*cAMP
	Species PDE10cmcAMP PDE10cmcAMP() #PDE10c*cAMP
	Species ATP ATP() #ATP
	Species AC5GaolfGTPGaiGTPmATP AC5GaolfGTPGaiGTPmATP() #AC5GaolfGTPGaiGTP*ATP
	Species AC5GaiGTPmATP AC5GaiGTPmATP() #AC5GaiGTP*ATP
	Species AC5GaolfGTPmATP AC5GaolfGTPmATP() #AC5GaolfGTP*ATP
	Species AC5mATP AC5mATP() #AC5*ATP
	Species AC5CaGaolfGTPmATP AC5CaGaolfGTPmATP() #AC5CaGaolfGTP*ATP
	Species AC5CaGaiGTPmATP AC5CaGaiGTPmATP() #AC5CaGaiGTP*ATP
	Species AC5CaGaolfGTPGaiGTPmATP AC5CaGaolfGTPGaiGTPmATP() #AC5CaGaolfGTPGaiGTP*ATP
	Species AC5CamATP AC5CamATP() #AC5Ca*ATP
	Species A2ARAdnGolf A2ARAdnGolf() #A2ARAdnGolf
	Species A2ARAdn Adn(a2ar!268).A2AR(adn!268) #A2ARAdn
	Species A2AR A2AR(adn) #A2AR
	Species totalActivePKA PKA(PKAreg~0,b56pp2a,c~C,camp,d32p75,totalActivePKA~totalActivePKA) #totalActivePKA
end observables
begin functions
	DApeak() = ModelValue_133 + (-ModelValue_133 + ModelValue_134)*(-1/(exp(ModelValue_132*(ModelValue_135 + ModelValue_136) - ModelValue_132*time()) + 1) + 1/(exp(ModelValue_132*ModelValue_135 - ModelValue_132*time()) + 1))
	DAdip() = ModelValue_126 + (-ModelValue_126 + ModelValue_127)*(1 + 1/(exp(ModelValue_125*(ModelValue_128 + ModelValue_129) - ModelValue_125*time()) + 1) - 1/(exp(ModelValue_125*ModelValue_128 - ModelValue_125*time()) + 1))
	DA_ar() = DAdip*ModelValue_124 + DApeak*ModelValue_131 + ModelValue_138*(-ModelValue_124 - ModelValue_131 + 1)
	Adnpeak() =  if((time()<ModelValue_146),(0),((exp(-ModelValue_141*(-ModelValue_146+time()))-exp(-ModelValue_142*(-ModelValue_146+time())))/ModelValue_145))
	Adn_ar() = Adnpeak*ModelValue_147*(-ModelValue_139 + ModelValue_140) + ModelValue_139
	Adnpeak_normalize() = exp(-ModelValue_141*ModelValue_144) - exp(-ModelValue_142*ModelValue_144)
	Adnpeak_tmax() = ln(ModelValue_141/ModelValue_142)/(ModelValue_141 - ModelValue_142)
	totalActivePKA_ar() = -PKAcD32p75 + PKAreg
end functions
begin reaction rules
	revreaction_1: A2ARGolf() + Adn(a2ar) <-> A2ARAdnGolf() mw3fc2c1ed_0097_4f7f_bcd5_904dc6ad5a56,mw858f28f3_086a_436b_ba23_4fc7372c8884
	revreaction_2: Adn(a2ar!268).A2AR(adn!268) + GaolfG(ac5,dp~DP,gbgolf!261,tp~0).Gbgolf(gaolfg!261) <-> A2ARAdnGolf() mwb17941e5_1ad5_42b9_98c6_e62b1a697dbb,mw8e4e88b6_60b3_43bd_8f5c_923712ee64ea
	revreaction_3: A2AR(adn) + GaolfG(ac5,dp~DP,gbgolf!261,tp~0).Gbgolf(gaolfg!261) <-> A2ARGolf() mw448bd49f_40ad_46c9_81f6_3494057dc37d,mwa466eec8_9bc0_44d5_8027_d5925b378429
	revreaction_4: A2AR(adn) + Adn(a2ar) <-> Adn(a2ar!268).A2AR(adn!268) mwdad9965c_2334_481f_8544_f1a81385a28e,mwc23d8bf6_2a60_4760_8bf5_c1bab432ab52
	revreaction_5: D2R(da) + GaiG(ac5,dp~DP,gbgi!260,tp~0).Gbgi(gaig!260) <-> D2RGi() mwffa5af7e_9155_4942_9424_cd94ac5018ed,mw0060906c_a035_468c_aa1c_130959bcf15a
	revreaction_6: DA(d2r!267).D2R(da!267) + GaiG(ac5,dp~DP,gbgi!260,tp~0).Gbgi(gaig!260) <-> D2RDAGi() mw71a5a1e9_f803_46d7_bf5e_a4965ceef2e0,mw13378d99_aa94_4d9d_a73e_9ec3830b6212
	revreaction_7: DA(d2r) + D2RGi() <-> D2RDAGi() mw066c69e2_66da_4621_9180_bce71b7077c3,mwefa9bb47_f13f_4a21_a62d_a4debcf7b52b
	revreaction_8: DA(d2r) + D2R(da) <-> DA(d2r!267).D2R(da!267) mw80292f32_fd53_4b5d_872a_e21c2d90c52a,mwce0df80f_1563_453d_b33d_a88f6b2c93b7
	revreaction_9: AC5(ca,gaig,gaolfg) + GaolfG(ac5,dp~0,gbgolf,tp~TP) <-> GaolfG(ac5!264,dp~0,gbgolf,tp~TP).AC5(ca,gaig,gaolfg!264) mw0a255671_d9ca_4384_a153_ce17e1111453,mwcd307ee9_33da_4303_9c28_644ad2d1630c
	revreaction_10: AC5(ca,gaig,gaolfg) + Ca(ac5,b72pp2a,cam) <-> Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig,gaolfg) mwe737a297_e5be_46ed_af75_ccc7428c3977,mwddcb8d81_9f5a_457e_a54c_a0c1b1f29f0b
	revreaction_11: Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig,gaolfg) + GaolfG(ac5,dp~0,gbgolf,tp~TP) <-> GaolfG(ac5!264,dp~0,gbgolf,tp~TP).Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig,gaolfg!264) mw0a255671_d9ca_4384_a153_ce17e1111453,mwcd307ee9_33da_4303_9c28_644ad2d1630c
	revreaction_12: GaiG(ac5,dp~0,gbgi,tp~TP) + Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig,gaolfg) <-> GaiG(ac5!262,dp~0,gbgi,tp~TP).Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig!262,gaolfg) mw1ef56a9a_9d9b_4490_8fcd_53b7e50bf5d6,mw6ae3f7a6_bf58_475e_930e_6bf7a79f3761
	revreaction_13: GaiG(ac5,dp~0,gbgi,tp~TP) + AC5(ca,gaig,gaolfg) <-> GaiG(ac5!262,dp~0,gbgi,tp~TP).AC5(ca,gaig!262,gaolfg) mw1ef56a9a_9d9b_4490_8fcd_53b7e50bf5d6,mw6ae3f7a6_bf58_475e_930e_6bf7a79f3761
	revreaction_14: GaiG(ac5,dp~0,gbgi,tp~TP) + GaolfG(ac5!264,dp~0,gbgolf,tp~TP).AC5(ca,gaig,gaolfg!264) <-> GaiG(ac5!262,dp~0,gbgi,tp~TP).GaolfG(ac5!264,dp~0,gbgolf,tp~TP).AC5(ca,gaig!262,gaolfg!264) mwc52aebc2_571c_4f96_84ee_0613ae73db89,mw9330e49a_b214_4807_b614_4241a4a12c43
	revreaction_15: GaiG(ac5,dp~0,gbgi,tp~TP) + GaolfG(ac5!264,dp~0,gbgolf,tp~TP).Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig,gaolfg!264) <-> GaiG(ac5!262,dp~0,gbgi,tp~TP).GaolfG(ac5!264,dp~0,gbgolf,tp~TP).Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig!262,gaolfg!264) mwc52aebc2_571c_4f96_84ee_0613ae73db89,mw9330e49a_b214_4807_b614_4241a4a12c43
	revreaction_16: GaiG(ac5!262,dp~0,gbgi,tp~TP).AC5(ca,gaig!262,gaolfg) + GaolfG(ac5,dp~0,gbgolf,tp~TP) <-> GaiG(ac5!262,dp~0,gbgi,tp~TP).GaolfG(ac5!264,dp~0,gbgolf,tp~TP).AC5(ca,gaig!262,gaolfg!264) mw649b47b3_4c3a_4ac9_ae94_5c38ccf81e39,mwc911f28c_b62f_4269_84ed_d852f6da24f9
	revreaction_17: GaiG(ac5!262,dp~0,gbgi,tp~TP).Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig!262,gaolfg) + GaolfG(ac5,dp~0,gbgolf,tp~TP) <-> GaiG(ac5!262,dp~0,gbgi,tp~TP).GaolfG(ac5!264,dp~0,gbgolf,tp~TP).Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig!262,gaolfg!264) mw649b47b3_4c3a_4ac9_ae94_5c38ccf81e39,mwc911f28c_b62f_4269_84ed_d852f6da24f9
	revreaction_18: GaiG(ac5!262,dp~0,gbgi,tp~TP).GaolfG(ac5!264,dp~0,gbgolf,tp~TP).AC5(ca,gaig!262,gaolfg!264) + ATP() <-> AC5GaolfGTPGaiGTPmATP() mwb93138ce_a80b_4b26_b927_6b4a00651b64,mwb494aae2_da19_4ac0_96e2_0dcd9440edc2
	revreaction_19: ATP() + GaiG(ac5!262,dp~0,gbgi,tp~TP).AC5(ca,gaig!262,gaolfg) <-> AC5GaiGTPmATP() mw541807fb_7d9f_4788_9f21_cc62846b5826,mwb494aae2_da19_4ac0_96e2_0dcd9440edc2
	revreaction_20: GaolfG(ac5!264,dp~0,gbgolf,tp~TP).AC5(ca,gaig,gaolfg!264) + ATP() <-> AC5GaolfGTPmATP() mw72ceb3da_d538_4f25_8e69_f322eb0b5e57,mwb494aae2_da19_4ac0_96e2_0dcd9440edc2
	revreaction_21: AC5(ca,gaig,gaolfg) + ATP() <-> AC5mATP() mw9c2302f8_3d47_4247_a338_a02c53fc5331,mwb494aae2_da19_4ac0_96e2_0dcd9440edc2
	revreaction_22: Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig,gaolfg) + ATP() <-> AC5CamATP() mw9510e553_a7fd_4c9a_b284_19b3cc01ae7d,mwb494aae2_da19_4ac0_96e2_0dcd9440edc2
	revreaction_23: GaolfG(ac5!264,dp~0,gbgolf,tp~TP).Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig,gaolfg!264) + ATP() <-> AC5CaGaolfGTPmATP() mwb56b5ab7_47cc_4fbc_b68b_dfdc6be6d7a4,mwb494aae2_da19_4ac0_96e2_0dcd9440edc2
	revreaction_24: GaiG(ac5!262,dp~0,gbgi,tp~TP).Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig!262,gaolfg) + ATP() <-> AC5CaGaiGTPmATP() mwa1bc2233_5bb9_4135_88ed_bb51640faec8,mwb494aae2_da19_4ac0_96e2_0dcd9440edc2
	revreaction_25: GaiG(ac5!262,dp~0,gbgi,tp~TP).GaolfG(ac5!264,dp~0,gbgolf,tp~TP).Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig!262,gaolfg!264) + ATP() <-> AC5CaGaolfGTPGaiGTPmATP() mw00f3118f_5d5a_48d0_bcc4_749d5f9dc73a,mwb494aae2_da19_4ac0_96e2_0dcd9440edc2
	revreaction_26: GaolfG(ac5,dp~0,gbgolf,tp~TP) + AC5GaiGTPmATP() <-> AC5GaolfGTPGaiGTPmATP() mw649b47b3_4c3a_4ac9_ae94_5c38ccf81e39,mwc911f28c_b62f_4269_84ed_d852f6da24f9
	revreaction_27: GaolfG(ac5,dp~0,gbgolf,tp~TP) + AC5CaGaiGTPmATP() <-> AC5CaGaolfGTPGaiGTPmATP() mw649b47b3_4c3a_4ac9_ae94_5c38ccf81e39,mwc911f28c_b62f_4269_84ed_d852f6da24f9
	revreaction_28: GaolfG(ac5,dp~0,gbgolf,tp~TP) + AC5mATP() <-> AC5GaolfGTPmATP() mw0a255671_d9ca_4384_a153_ce17e1111453,mwcd307ee9_33da_4303_9c28_644ad2d1630c
	revreaction_29: GaolfG(ac5,dp~0,gbgolf,tp~TP) + AC5CamATP() <-> AC5CaGaolfGTPmATP() mw0a255671_d9ca_4384_a153_ce17e1111453,mwcd307ee9_33da_4303_9c28_644ad2d1630c
	revreaction_30: Ca(ac5,b72pp2a,cam) + AC5mATP() <-> AC5CamATP() mwe737a297_e5be_46ed_af75_ccc7428c3977,mwddcb8d81_9f5a_457e_a54c_a0c1b1f29f0b
	revreaction_31: AC5mATP() + GaiG(ac5,dp~0,gbgi,tp~TP) <-> AC5GaiGTPmATP() mw1ef56a9a_9d9b_4490_8fcd_53b7e50bf5d6,mw6ae3f7a6_bf58_475e_930e_6bf7a79f3761
	revreaction_32: GaiG(ac5,dp~0,gbgi,tp~TP) + AC5GaolfGTPmATP() <-> AC5GaolfGTPGaiGTPmATP() mwc52aebc2_571c_4f96_84ee_0613ae73db89,mw9330e49a_b214_4807_b614_4241a4a12c43
	revreaction_33: AC5CamATP() + GaiG(ac5,dp~0,gbgi,tp~TP) <-> AC5CaGaiGTPmATP() mw1ef56a9a_9d9b_4490_8fcd_53b7e50bf5d6,mw6ae3f7a6_bf58_475e_930e_6bf7a79f3761
	revreaction_34: GaiG(ac5,dp~0,gbgi,tp~TP) + AC5CaGaolfGTPmATP() <-> AC5CaGaolfGTPGaiGTPmATP() mwc52aebc2_571c_4f96_84ee_0613ae73db89,mw9330e49a_b214_4807_b614_4241a4a12c43
	revreaction_35: cAMP(pka) + PKA(PKAreg~0,b56pp2a,c~0,camp,d32p75,totalActivePKA~0) <-> PKA(PKAreg~0,b56pp2a,c~0,camp!257,d32p75,totalActivePKA~0).cAMP(pka!257) mw0a87aca4_d8f3_4058_83d0_7addc7e7b981,mwf79c6674_0a76_49e2_973d_6677fa109433
	revreaction_36: cAMP(pka) + PKA(PKAreg~0,b56pp2a,c~0,camp!257,d32p75,totalActivePKA~0).cAMP(pka!257) <-> PKAcAMP4() mw36eae1b1_84f0_42c3_ad0d_d27aa571346d,mwad5ebb51_1d46_40a7_b8d6_13ba4a466b92
	revreaction_37: PKAcAMP4() <-> PKA(PKAreg~0,b56pp2a,c~C,camp,d32p75,totalActivePKA~0) + PKA(PKAreg~PKAreg,b56pp2a,c~0,camp,d32p75,totalActivePKA~0) mw8deeabf3_8313_4e28_90be_ded2d2f045f3,mw535609a4_02d1_42d0_ba4b_dce4b2136617
	revreaction_38: cAMP(pka) + PDE4() <-> PDE4mcAMP() mw77fab49b_2ba6_4efe_9342_285f4fd3b7fa,mw05f4bef4_5e8d_4a92_bb74_cc0bb4c0260e
	revreaction_39: PDE10() + cAMP(pka) + cAMP(pka) <-> PDE10c() mwd1b16e73_4fcb_4e4c_9804_3137259ba749,mw36cb62c6_0b3c_4d1b_9001_3b37aa7477e2
	revreaction_40: cAMP(pka) + PDE10() <-> PDE10mcAMP() mw0b1ccae3_37fa_4a23_a817_cd8fc458dc79,mw6f753a0e_a7ec_4b4b_bcfc_edb95a3f1296
	revreaction_41: cAMP(pka) + PDE10c() <-> PDE10cmcAMP() mw326e0065_b4f6_41ae_b1d0_66092dc5ebb2,mwca52f04a_bb5f_4d3f_ba6d_939bbb3895b9
	revreaction_42: CaM(ca,ca,pp2b) + Ca(ac5,b72pp2a,cam) <-> Ca(ac5,b72pp2a,cam!255).CaM(ca!255,ca,pp2b) mw894b221b_266d_4277_ac01_83579ed103e6,mw68039b16_b516_4fba_bedd_d4bbc1a23a02
	revreaction_43: Ca(ac5,b72pp2a,cam) + Ca(ac5,b72pp2a,cam!255).CaM(ca!255,ca,pp2b) <-> Ca(ac5,b72pp2a,cam!255).CaM(ca!255,ca!266,pp2b).Ca(ac5,b72pp2a,cam!266) mw1cc91fa1_3a8e_456d_a05d_6ddd5df00d00,mweb9b200d_dd29_4618_9e73_cddabb464215
	revreaction_44: PP2B(cam) + CaM(ca,ca,pp2b) <-> CaM(ca,ca,pp2b!256).PP2B(cam!256) mw5557cb87_d4fa_44ba_b006_e67b44862136,mwe7952ed1_96f3_4d0c_8977_b6a2b4f26665
	revreaction_45: PP2B(cam) + Ca(ac5,b72pp2a,cam!255).CaM(ca!255,ca!266,pp2b).Ca(ac5,b72pp2a,cam!266) <-> Ca(ac5,b72pp2a,cam!255).CaM(ca!255,ca!266,pp2b!256).Ca(ac5,b72pp2a,cam!266).PP2B(cam!256) mwe2bf9c41_d94e_4ff4_a573_8ac4a12513b0,mw810d8094_3a3e_494e_bd1b_fcd9e8ef1d17
	revreaction_46: CaM(ca,ca,pp2b!256).PP2B(cam!256) + Ca(ac5,b72pp2a,cam) <-> Ca(ac5,b72pp2a,cam!255).CaM(ca!255,ca,pp2b!256).PP2B(cam!256) mwd6652286_f31c_4bfd_a885_ed2f2ca149af,mwd6fae483_ca98_40de_bed9_5e2302f769f3
	revreaction_47: Ca(ac5,b72pp2a,cam!255).CaM(ca!255,ca,pp2b!256).PP2B(cam!256) + Ca(ac5,b72pp2a,cam) <-> Ca(ac5,b72pp2a,cam!255).CaM(ca!255,ca!266,pp2b!256).Ca(ac5,b72pp2a,cam!266).PP2B(cam!256) mwfe873584_629a_46c8_aae9_fdacdb9ad266,mwf3c85708_890c_45d1_bcbc_fe90e9ca792f
	revreaction_48: PP2B(cam) + Ca(ac5,b72pp2a,cam!255).CaM(ca!255,ca,pp2b) <-> Ca(ac5,b72pp2a,cam!255).CaM(ca!255,ca,pp2b!256).PP2B(cam!256) mw0d101277_e2ba_402c_9635_f10e690a9313,mw3e479c87_36d8_4cda_a0a2_0ee2b658f51a
	revreaction_49: B72PP2A(ca) + Ca(ac5,b72pp2a,cam) <-> Ca(ac5,b72pp2a!259,cam).B72PP2A(ca!259) mw269c014a_6379_44c3_813b_52d8145506e7,mwc4c3d33d_b2b7_4ab2_a171_1864ea638ec0
	revreaction_50: PKA(PKAreg~0,b56pp2a,c~C,camp,d32p75,totalActivePKA~0) + DARPP32() <-> PKAcmD32() mw1db20a7e_3972_4c3a_83c0_c6fcd7c9cb45,mw4e2575eb_3641_422c_b836_d854958d4d1e
	revreaction_51: PKA(PKAreg~0,b56pp2a,c~C,camp,d32p75,totalActivePKA~0) + B56PP2A(p~0,pka) <-> PKA(PKAreg~0,b56pp2a!265,c~C,camp,d32p75,totalActivePKA~0).B56PP2A(p~0,pka!265) mw690a2134_fb59_4061_be3b_929335ef629b,mwc0a23657_7f6c_4e0d_9f11_06b3ab5126f0
	revreaction_52: D32p34(pp1) + PP1(d32p34) <-> PP1(d32p34!258).D32p34(pp1!258) mw4a930624_fcc1_4d08_8e24_9a0082418629,mw7419e1e3_b601_44a8_93ff_e5b31995791e
	revreaction_53: CDK5() + DARPP32() <-> CDK5mD32() mw1b9e5266_efac_4696_a213_80f9f83d948a,mwa27c20d8_b6ed_4617_a6f6_9af2752d3a33
	revreaction_54: D32p75(pka) + PKA(PKAreg~0,b56pp2a,c~C,camp,d32p75,totalActivePKA~0) <-> PKA(PKAreg~0,b56pp2a,c~C,camp,d32p75!263,totalActivePKA~0).D32p75(pka!263) mw49e66b9c_64bd_428a_9090_15e4132e9781,mw2037ae7c_b1dc_4517_a61c_88a1f2bdcd12
	revreaction_55: B56PP2A(p~P,pka) + D32p75(pka) <-> B56PP2AmD32p75(p~P) mwf1c01e00_be7d_4a3b_af91_3dd9ab9cea62,mw34b74798_bd70_4456_a53b_9e1e46bb9750
	revreaction_56: B72PP2A(ca) + D32p75(pka) <-> B72PP2AmD32p75() mw2226fa14_2b95_45a6_8705_4b38073fc5f7,mw009f9583_4e96_4672_ab71_0ef4b697aa6f
	revreaction_57: D32p75(pka) + Ca(ac5,b72pp2a!259,cam).B72PP2A(ca!259) <-> B72PP2ACamD32p75() mwc44dc346_a522_4680_b81d_77540364e07c,mw43aa8259_68fc_4f47_ad18_37eaa0a94b5a
	revreaction_58: D32p34(pp1) + Ca(ac5,b72pp2a,cam!255).CaM(ca!255,ca!266,pp2b!256).Ca(ac5,b72pp2a,cam!266).PP2B(cam!256) <-> PP2BcmD32p34() mwa390f769_ebf1_4023_8af0_1c00e2a9bf82,mw0beb6cc4_36bd_4022_8993_29f981652ebe
	revreaction_59: D32p75(pka) + B56PP2A(p~0,pka) <-> B56PP2AmD32p75(p~0) mwb3fdecfc_6465_4e63_888a_7762f542c790,mw19a820fb_1581_4bf1_9577_9e20f3296159
	revreaction_60: D32p34(pp1) + Ca(ac5,b72pp2a!259,cam).B72PP2A(ca!259) <-> B72PP2ACamD32p34() mwe79f507b_73c9_4056_ae91_6244dcbc49bb,mw26206710_ba98_4010_9e5b_c3aae2ce29ec
	revreaction_61: D32p34(pp1) + B72PP2A(ca) <-> B72PP2AmD32p34() mwe79f507b_73c9_4056_ae91_6244dcbc49bb,mw26206710_ba98_4010_9e5b_c3aae2ce29ec
	irrevreaction_1: A2ARAdnGolf() -> Gbgolf(gaolfg) + Adn(a2ar!268).A2AR(adn!268) + GaolfG(ac5,dp~0,gbgolf,tp~TP) mw0dd72d64_80e1_4f76_a444_fd175dbfab0c
	irrevreaction_2: GaolfG(ac5,dp~0,gbgolf,tp~TP) -> GaolfG(ac5,dp~DP,gbgolf,tp~0) mw5623544e_e7e1_439f_88d3_3b0cbea8ccf5
	irrevreaction_3: GaolfG(ac5,dp~DP,gbgolf,tp~0) + Gbgolf(gaolfg) -> GaolfG(ac5,dp~DP,gbgolf!261,tp~0).Gbgolf(gaolfg!261) mw2f090a45_946b_4587_a3e3_b29f3bb5c6ae
	irrevreaction_4: D2RDAGi() -> GaiG(ac5,dp~0,gbgi,tp~TP) + DA(d2r!267).D2R(da!267) + Gbgi(gaig) mwd05b4199_53ad_4807_9a8c_d93ce35be857
	irrevreaction_5: GaiG(ac5,dp~0,gbgi,tp~TP) -> GaiG(ac5,dp~DP,gbgi,tp~0) mwfcfb91ff_a495_41f9_bdff_fcef779112fd
	irrevreaction_6: Gbgi(gaig) + GaiG(ac5,dp~DP,gbgi,tp~0) -> GaiG(ac5,dp~DP,gbgi!260,tp~0).Gbgi(gaig!260) mw5175a06e_3927_4993_9242_8f76b0aaf42f
	irrevreaction_7: AC5GaolfGTPmATP() -> cAMP(pka) + GaolfG(ac5!264,dp~0,gbgolf,tp~TP).AC5(ca,gaig,gaolfg!264) mw8186cb1d_66c4_4855_bcbb_82d75173ae8a
	irrevreaction_8: cAMP(pka) + GaolfG(ac5!264,dp~0,gbgolf,tp~TP).AC5(ca,gaig,gaolfg!264) -> AC5GaolfGTPmATP() mw789c453f_f13d_467f_8f02_d5a714cda15d
	irrevreaction_9: AC5mATP() -> cAMP(pka) + AC5(ca,gaig,gaolfg) mw98b63d59_8744_4e8c_8653_68ae1eb4ad40
	irrevreaction_10: cAMP(pka) + AC5(ca,gaig,gaolfg) -> AC5mATP() mwaa3af366_350e_4f18_936b_6372dc484f82
	irrevreaction_11: AC5GaiGTPmATP() -> cAMP(pka) + GaiG(ac5!262,dp~0,gbgi,tp~TP).AC5(ca,gaig!262,gaolfg) mwe4474191_0c92_406c_a6f5_4a167f541d36
	irrevreaction_12: cAMP(pka) + GaiG(ac5!262,dp~0,gbgi,tp~TP).AC5(ca,gaig!262,gaolfg) -> AC5GaiGTPmATP() mw17d612a2_c9d5_4251_8122_5f037fc630e3
	irrevreaction_13: AC5GaolfGTPGaiGTPmATP() -> cAMP(pka) + GaiG(ac5!262,dp~0,gbgi,tp~TP).GaolfG(ac5!264,dp~0,gbgolf,tp~TP).AC5(ca,gaig!262,gaolfg!264) mw5301f7f5_60df_4eb9_ba3b_81e6519d1cbb
	irrevreaction_14: cAMP(pka) + GaiG(ac5!262,dp~0,gbgi,tp~TP).GaolfG(ac5!264,dp~0,gbgolf,tp~TP).AC5(ca,gaig!262,gaolfg!264) -> AC5GaolfGTPGaiGTPmATP() mw5f50df8c_48a1_4c29_9e24_cca9a1242ee5
	irrevreaction_15: AC5CaGaolfGTPGaiGTPmATP() -> cAMP(pka) + GaiG(ac5!262,dp~0,gbgi,tp~TP).GaolfG(ac5!264,dp~0,gbgolf,tp~TP).Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig!262,gaolfg!264) mw1a6a8649_d7cb_4379_983a_cca2acac3112
	irrevreaction_16: cAMP(pka) + GaiG(ac5!262,dp~0,gbgi,tp~TP).GaolfG(ac5!264,dp~0,gbgolf,tp~TP).Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig!262,gaolfg!264) -> AC5CaGaolfGTPGaiGTPmATP() mw86fd6328_2ac3_4dc0_97a2_698cf44eed12
	irrevreaction_17: AC5CaGaiGTPmATP() -> cAMP(pka) + GaiG(ac5!262,dp~0,gbgi,tp~TP).Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig!262,gaolfg) mwc728d91d_7616_43db_bd1d_55e49e9c026a
	irrevreaction_18: cAMP(pka) + GaiG(ac5!262,dp~0,gbgi,tp~TP).Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig!262,gaolfg) -> AC5CaGaiGTPmATP() mwdb2a670f_13fb_4bda_8c72_d706c6bc37e9
	irrevreaction_19: AC5CamATP() -> cAMP(pka) + Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig,gaolfg) mw65cae8fe_0eac_4792_88bf_2dfb441030e5
	irrevreaction_20: cAMP(pka) + Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig,gaolfg) -> AC5CamATP() mw515fcf69_b724_40d9_84ba_5f92d75ae5a7
	irrevreaction_21: AC5CaGaolfGTPmATP() -> cAMP(pka) + GaolfG(ac5!264,dp~0,gbgolf,tp~TP).Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig,gaolfg!264) mwb0a6bd5e_87a0_425c_a5c7_ea69903e0bf3
	irrevreaction_22: cAMP(pka) + GaolfG(ac5!264,dp~0,gbgolf,tp~TP).Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig,gaolfg!264) -> AC5CaGaolfGTPmATP() mw034d8151_fae1_4738_b675_39c38a58118d
	irrevreaction_23: GaolfG(ac5!264,dp~0,gbgolf,tp~TP).AC5(ca,gaig,gaolfg!264) -> AC5(ca,gaig,gaolfg) + GaolfG(ac5,dp~DP,gbgolf,tp~0) mw8db06baf_d8bb_4a1a_b415_2d51fa1e53ba
	irrevreaction_24: GaolfG(ac5!264,dp~0,gbgolf,tp~TP).Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig,gaolfg!264) -> Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig,gaolfg) + GaolfG(ac5,dp~DP,gbgolf,tp~0) mw8db06baf_d8bb_4a1a_b415_2d51fa1e53ba
	irrevreaction_25: GaiG(ac5!262,dp~0,gbgi,tp~TP).Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig!262,gaolfg) -> Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig,gaolfg) + GaiG(ac5,dp~DP,gbgi,tp~0) mwcabc0868_2435_4850_964b_e3ddee39f5ad
	irrevreaction_26: GaiG(ac5!262,dp~0,gbgi,tp~TP).AC5(ca,gaig!262,gaolfg) -> AC5(ca,gaig,gaolfg) + GaiG(ac5,dp~DP,gbgi,tp~0) mwcabc0868_2435_4850_964b_e3ddee39f5ad
	irrevreaction_27: GaiG(ac5!262,dp~0,gbgi,tp~TP).GaolfG(ac5!264,dp~0,gbgolf,tp~TP).AC5(ca,gaig!262,gaolfg!264) -> GaiG(ac5!262,dp~0,gbgi,tp~TP).AC5(ca,gaig!262,gaolfg) + GaolfG(ac5,dp~DP,gbgolf,tp~0) mw8db06baf_d8bb_4a1a_b415_2d51fa1e53ba
	irrevreaction_28: GaiG(ac5!262,dp~0,gbgi,tp~TP).GaolfG(ac5!264,dp~0,gbgolf,tp~TP).AC5(ca,gaig!262,gaolfg!264) -> GaolfG(ac5!264,dp~0,gbgolf,tp~TP).AC5(ca,gaig,gaolfg!264) + GaiG(ac5,dp~DP,gbgi,tp~0) mwcabc0868_2435_4850_964b_e3ddee39f5ad
	irrevreaction_29: GaiG(ac5!262,dp~0,gbgi,tp~TP).GaolfG(ac5!264,dp~0,gbgolf,tp~TP).Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig!262,gaolfg!264) -> GaiG(ac5!262,dp~0,gbgi,tp~TP).Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig!262,gaolfg) + GaolfG(ac5,dp~DP,gbgolf,tp~0) mw8db06baf_d8bb_4a1a_b415_2d51fa1e53ba
	irrevreaction_30: GaiG(ac5!262,dp~0,gbgi,tp~TP).GaolfG(ac5!264,dp~0,gbgolf,tp~TP).Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig!262,gaolfg!264) -> GaolfG(ac5!264,dp~0,gbgolf,tp~TP).Ca(ac5!253,b72pp2a,cam).AC5(ca!253,gaig,gaolfg!264) + GaiG(ac5,dp~DP,gbgi,tp~0) mwcabc0868_2435_4850_964b_e3ddee39f5ad
	irrevreaction_31: AC5GaolfGTPGaiGTPmATP() -> GaiG(ac5,dp~DP,gbgi,tp~0) + AC5GaolfGTPmATP() mwcabc0868_2435_4850_964b_e3ddee39f5ad
	irrevreaction_32: AC5GaiGTPmATP() -> AC5mATP() + GaiG(ac5,dp~DP,gbgi,tp~0) mwcabc0868_2435_4850_964b_e3ddee39f5ad
	irrevreaction_33: AC5GaolfGTPGaiGTPmATP() -> AC5GaiGTPmATP() + GaolfG(ac5,dp~DP,gbgolf,tp~0) mw8db06baf_d8bb_4a1a_b415_2d51fa1e53ba
	irrevreaction_34: AC5GaolfGTPmATP() -> AC5mATP() + GaolfG(ac5,dp~DP,gbgolf,tp~0) mw8db06baf_d8bb_4a1a_b415_2d51fa1e53ba
	irrevreaction_35: AC5CaGaolfGTPmATP() -> AC5CamATP() + GaolfG(ac5,dp~DP,gbgolf,tp~0) mw8db06baf_d8bb_4a1a_b415_2d51fa1e53ba
	irrevreaction_36: AC5CaGaolfGTPGaiGTPmATP() -> AC5CaGaolfGTPmATP() + GaiG(ac5,dp~DP,gbgi,tp~0) mwcabc0868_2435_4850_964b_e3ddee39f5ad
	irrevreaction_37: AC5CaGaiGTPmATP() -> AC5CamATP() + GaiG(ac5,dp~DP,gbgi,tp~0) mwcabc0868_2435_4850_964b_e3ddee39f5ad
	irrevreaction_38: AC5CaGaolfGTPGaiGTPmATP() -> AC5CaGaiGTPmATP() + GaolfG(ac5,dp~DP,gbgolf,tp~0) mw8db06baf_d8bb_4a1a_b415_2d51fa1e53ba
	irrevreaction_39: PDE4mcAMP() -> PDE4() + AMP() mwa4148cd1_a298_447c_aea8_226688c3f526
	irrevreaction_40: PDE10mcAMP() -> PDE10() + AMP() mwf633f298_303f_46d1_b644_ae07ae366f45
	irrevreaction_41: PDE10cmcAMP() -> PDE10c() + AMP() mwac1bc66c_2623_47e6_a76d_c1629d962be5
	irrevreaction_42: PKAcmD32() -> D32p34(pp1) + PKA(PKAreg~0,b56pp2a,c~C,camp,d32p75,totalActivePKA~0) mw2561b5ab_39c9_4453_99d8_f0f37779b63a
	irrevreaction_43: PKA(PKAreg~0,b56pp2a!265,c~C,camp,d32p75,totalActivePKA~0).B56PP2A(p~0,pka!265) -> B56PP2A(p~P,pka) + PKA(PKAreg~0,b56pp2a,c~C,camp,d32p75,totalActivePKA~0) mwe5d8a08f_c74e_4618_892c_41c71a57cade
	irrevreaction_44: B56PP2A(p~P,pka) -> B56PP2A(p~0,pka) mw3a56b314_299f_48d2_a179_97bf6a30f38f
	irrevreaction_45: CDK5mD32() -> CDK5() + D32p75(pka) mwed967767_31e4_4e9e_8117_5372f9f4f79a
	irrevreaction_46: B56PP2AmD32p75(p~P) -> B56PP2A(p~P,pka) + DARPP32() mw6bf18344_b899_4a62_ac8d_5f8bdd4bbe2f
	irrevreaction_47: B72PP2AmD32p75() -> B72PP2A(ca) + DARPP32() mw6af7af00_75ac_4f58_8383_7047a5fb5181
	irrevreaction_48: B72PP2ACamD32p75() -> Ca(ac5,b72pp2a!259,cam).B72PP2A(ca!259) + DARPP32() mw4d0140a3_fd9c_4adb_9be0_63d4612400ee
	irrevreaction_49: B56PP2AmD32p75(p~0) -> B56PP2A(p~0,pka) + DARPP32() mw88c9326a_fbe9_4dd8_aded_b5be3f012691
	irrevreaction_50: B72PP2ACamD32p34() -> Ca(ac5,b72pp2a!259,cam).B72PP2A(ca!259) + DARPP32() mwdcc4ce84_732d_4f5b_84e2_e5b93617200b
	irrevreaction_51: B72PP2AmD32p34() -> DARPP32() + B72PP2A(ca) mwdcc4ce84_732d_4f5b_84e2_e5b93617200b
	irrevreaction_52: PP2BcmD32p34() -> DARPP32() + Ca(ac5,b72pp2a,cam!255).CaM(ca!255,ca!266,pp2b!256).Ca(ac5,b72pp2a,cam!266).PP2B(cam!256) mw62c51fcf_c107_4d3c_849e_9b168df54490
end reaction rules
end model
