###
#@BQB_HAS_PART:['http://identifiers.org/kegg.pathway/map04010']
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1708250000', 'http://identifiers.org/biomodels.db/BIOMD0000000647']
#@BQB_HAS_PROPERTY:['http://identifiers.org/go/GO:0070372']
#@BQM_UNKNOWN:['http://identifiers.org/mamo/MAMO_0000046']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/doi/10.1007/3-540-36481-1_11']
#@creatorEmail:'mroberts@ebi.ac.uk'
#@creatorName:'Roberts Matthew Grant'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 11 molecules and 11 reactions. The translated model has 6 molecules and 11 rules'
###
begin model
begin parameters
	k1 0.53
	k2 0.0072
	k3 0.625
	k4 0.00245
	k5 0.0315
	k6 0.8
	k7 0.0075
	k8 0.071
	k9 0.92
	k10 0.00122
	k11 0.87
end parameters
begin molecule types
	#^ bqbiol:hasPart uniprot:P27361, uniprot:P04049, ncit:C2336
	#^ bqbiol:isVersionOf go:GO:0043234
	Raf1_RKIP_ERKPP()
	#^ bqbiol:isVersionOf ncit:C16981
	RP(rkip)
	#^ bqbiol:isVersionOf uniprot:P04049
	Raf1(rkip)
	#^ bqbiol:isVersionOf ncit:C2336
	RKIP(p~P~0,raf1,rp)
	#^ bqbiol:isVersionOf uniprot:Q02750
	MEKPP(erk)
	#^ bqbiol:isVersionOf uniprot:P27361
	ERK(mekpp,pp~PP~0)
end molecule types
begin seed species
	Raf1(rkip) 1.2044e+18 # (2.0 * 1e-06)mol/L * 6.022e23/mol *1.0L #Raf1 #Raf1
	RKIP(p~0,raf1,rp) 1.5055e+18 #original 2.5substance/L  #RKIP #RKIP
	MEKPP(erk) 1.5055e+18 #original 2.5substance/L  #MEKPP #MEKPP
	ERK(mekpp,pp~PP) 1.5055e+18 #original 2.5substance/L  #ERKPP #ERKPP
	RP(rkip) 1.8066e+18 #original 3.0substance/L  #RP #RP
end seed species
begin observables
	Species Raf1 Raf1(rkip) #Raf1
	Species RKIP RKIP(p~0,raf1,rp) #RKIP
	Species Raf1_RKIP RKIP(p~0,raf1!364,rp).Raf1(rkip!364) #Raf1_RKIP
	Species Raf1_RKIP_ERKPP Raf1_RKIP_ERKPP() #Raf1_RKIP_ERKPP
	Species ERK ERK(mekpp,pp~0) #ERK
	Species RKIPP RKIP(p~P,raf1,rp) #RKIPP
	Species MEKPP MEKPP(erk) #MEKPP
	Species MEKPP_ERK ERK(mekpp!365,pp~0).MEKPP(erk!365) #MEKPP_ERK
	Species ERKPP ERK(mekpp,pp~PP) #ERKPP
	Species RP RP(rkip) #RP
	Species RKIPP_RP RKIP(p~P,raf1,rp!366).RP(rkip!366) #RKIPP_RP
end observables
begin reaction rules
	Raf1_RKIP_complex_formation: Raf1(rkip) + RKIP(p~0,raf1,rp) -> RKIP(p~0,raf1!364,rp).Raf1(rkip!364) k1
	Raf1_RKIP_complex_disassembly: RKIP(p~0,raf1!364,rp).Raf1(rkip!364) -> Raf1(rkip) + RKIP(p~0,raf1,rp) k2
	Raf1_RKIP_ERKPP_complex_formation: RKIP(p~0,raf1!364,rp).Raf1(rkip!364) + ERK(mekpp,pp~PP) -> Raf1_RKIP_ERKPP() k3
	Raf1_RKIP_ERKPP_complex_disassembly__ERK_phosphorylation: Raf1_RKIP_ERKPP() -> RKIP(p~0,raf1!364,rp).Raf1(rkip!364) + ERK(mekpp,pp~PP) k4
	Raf1_RKIP_ERKPP_complex_disassembly__RKIP_phosphorylation: Raf1_RKIP_ERKPP() -> Raf1(rkip) + ERK(mekpp,pp~0) + RKIP(p~P,raf1,rp) k5
	MEKPP_ERK_complex_formation: ERK(mekpp,pp~0) + MEKPP(erk) -> ERK(mekpp!365,pp~0).MEKPP(erk!365) k6
	MEKPP_ERK_complex_disassembly__ERK_unphosphorylated: ERK(mekpp!365,pp~0).MEKPP(erk!365) -> ERK(mekpp,pp~0) + MEKPP(erk) k7
	MEKPP_ERK_complex_disassembly__ERK_phosphorylated: ERK(mekpp!365,pp~0).MEKPP(erk!365) -> MEKPP(erk) + ERK(mekpp,pp~PP) k8
	RKIPP_RP_comlex_formation: RKIP(p~P,raf1,rp) + RP(rkip) -> RKIP(p~P,raf1,rp!366).RP(rkip!366) k9
	RKIPP_RP_complex_disassembly__phosphorylated_RKIP: RKIP(p~P,raf1,rp!366).RP(rkip!366) -> RP(rkip) + RKIP(p~P,raf1,rp) k10
	RKIPP_RP_complex_disassembly__unphosphorylated_RKIP: RKIP(p~P,raf1,rp!366).RP(rkip!366) -> RP(rkip) + RKIP(p~0,raf1,rp) k11
end reaction rules
end model
