###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1708290004', 'http://identifiers.org/biomodels.db/BIOMD0000000652']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/28367561']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/biomodels.db/BIOMD0000000149', 'http://identifiers.org/biomodels.db/BIOMD0000000033', 'http://identifiers.org/biomodels.db/BIOMD0000000623']
#@BQM_UNKNOWN:['http://identifiers.org/mamo/MAMO_0000046']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_HAS_PART:['http://identifiers.org/go/GO:0000165', 'http://identifiers.org/kegg.pathway/map04151', 'http://identifiers.org/kegg.pathway/map04310', 'http://identifiers.org/kegg.pathway/map04010']
#@BQB_HAS_PROPERTY:['http://identifiers.org/go/GO:0060828', 'http://identifiers.org/go/GO:0043408', 'http://identifiers.org/go/GO:0051896', 'http://identifiers.org/pw/PW:0000605']
#@BQB_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/21391741']
#@creatorEmail:'sheriff@ebi.ac.uk'
#@creatorName:'Sheriff Rahuman'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 54 molecules and 63 reactions. The translated model has 35 molecules and 84 rules'
###
begin model
begin parameters
	Kcat10a 0.12633
	Kcat10b 15.1212
	Kcat11a 185.76
	Kcat12 2.8324
	Kcat13 9.8537
	Kcat14 8.8912
	Kcat16a 0.8841
	Kcat16b 0.8841
	Kcat17a 0.12633
	Kcat17b 15.1212
	Kcat18b 0.02137
	Kcat19a 10.6737
	Kcat19b 0.07711
	Kcat20 4.0
	Kcat21 5.5
	Kcat22a 0.33
	Kcat22b 48.667
	Kcat23a 694.73
	Kcat24 32.344
	Kcat25 1509.4
	Kcat27a 0.002
	Kcat27b 0.04596
	Kcat27d 0.01541
	Kcat6b 1611.97
	Kcat7 32.644
	Kcat8b 1509.36
	Kcat9a 0.884096
	Km10a 1061.7
	Km10b 119355.0
	Km11a 4768400.0
	Km12 518750.0
	Km13 1007300.0
	Km14 3496500.0
	Km16a 62645.0
	Km16b 62464.6
	Km17a 1061.71
	Km17b 119355.0
	Km18b 763523.0
	Km19a 184912.0
	Km19b 272056.0
	Km20 4.0
	Km21 0.08
	Km22a 100.0
	Km22b 100.0
	Km23a 6086100.0
	Km24 35954.3
	Km25 1432400.0
	Km39 15.0
	Km6b 896896.0
	Km7 35954.3
	Km8b 1432410.0
	Km9a 62464.6
	Km9b 15.0
	V1 100.0
	V15b 4.0
	V26a 0.00154
	V37b 0.00705
	V8a 0.0717
	k11b1 1.1167e-05
	k11b2 120.0
	k15a 1.3
	k15c 0.00193
	k18a 0.005
	k21 2.18503e-05
	k22 0.121008
	k23b 2.5
	k26a 20.0
	k26b 0.000385
	k27c 0.00015
	k28 0.003
	k29 0.003
	k3 0.00125
	k30 0.000833
	k311 0.001515
	k312 0.01515
	k32a 0.00445
	k32b 0.002217
	k33a1 0.01667
	k33a2 0.8333
	k33b 0.002783
	k33c1 1.37e-06
	k33c2 1.667e-08
	k341 0.01667
	k342 2.0
	k35 3.433
	k36 3.433
	k37a1 0.01667
	k37a2 20.0
	k37c 4.283e-06
	k381 0.01667
	k382 0.5
	k39 0.01
	k4 0.2
	k40 0.00025
	k41 0.00695
	k51 0.003465
	k52 3.85e-05
	k53 0.00028833
	k54 1.5
	k6a 2.5
	k9b 0.025
	W 0
end parameters
begin molecule types
	#^ bqbiol:isVersionOf uniprot:P62834
	Rap1(p~P~0)
	#^ bqbiol:isVersionOf uniprot:Q02750
	MEK(p~P~0)
	#^ bqbiol:isVersionOf uniprot:P27361
	ERK()
	#^ bqbiol:isVersionOf uniprot:P49841
	GSK3b(p~P~0)
	#^ bqbiol:isVersionOf uniprot:P25054
	APC(axin,p~P~0,phospho~PP~0,rkip)
	#^ bqbiol:isVersionOf urn:miriam:omit:0027264
	#^ bqbiol:hasProperty urn:miriam:omit:0010192
	PI3K(p~P~0)
	#^ bqbiol:isVersionOf urn:miriam:chebi:0016618
	PIP3()
	#^ bqbiol:hasPart uniprot:O15169, uniprot:P25054, uniprot:P49841
	APC_Axin_GSK3b()
	#^ bqbiol:hasPart uniprot:O15169, uniprot:P49841, uniprot:P35222, uniprot:P25054
	#^ bqbiol:hasProperty urn:miriam:bao:0002007
	pAPC_pAxin_GSK3b_bCatenin()
	#^ bqbiol:isVersionOf uniprot:P15056
	bRaf(p~P~0)
	#^ bqbiol:isVersionOf uniprot:Q13905
	C3G()
	#^ bqbiol:isVersionOf uniprot:O14640
	Dshi(Dsha~Dsha~0)
	#^ bqbiol:isVersionOf uniprot:P00533
	#^ bqbiol:hasProperty urn:miriam:bao:0002007
	pEGFR()
	#^ bqbiol:isVersionOf uniprot:P60484
	PTEN()
	#^ bqbiol:isVersionOf uniprot:P31749
	Akt(p~P~0)
	#^ bqbiol:isVersionOf uniprot:P20936
	Ras_Gap()
	#^ bqbiol:isVersionOf uniprot:P67775
	RafPPtase()
	#^ bqbiol:isVersionOf uniprot:Q9UJU2
	TCF(rkip)
	#^ bqbiol:isVersionOf uniprot:Q15418
	P90Rsk(p~P~0)
	#^ bqbiol:isVersionOf uniprot:O15169
	Axin(apc,p~P~0)
	#^ bqbiol:isVersionOf uniprot:P62070
	#^ bqbiol:hasProperty urn:miriam:bao:0002007
	pRas()
	#^ bqbiol:isVersionOf uniprot:P67775
	PP2A()
	#^ bqbiol:isVersionOf uniprot:P01133
	EGF(rkip)
	#^ bqbiol:isVersionOf uniprot:P04049
	Raf1(p~P~0)
	#^ bqbiol:isVersionOf uniprot:Q07889
	SOS(p~P~0)
	#^ bqbiol:isVersionOf uniprot:P01024
	#^ bqbiol:hasProperty urn:miriam:bao:0002007
	pC3G()
	#^ bqbiol:isVersionOf uniprot:P28482
	#^ bqbiol:hasProperty urn:miriam:bao:0002007
	pERK()
	#^ bqbiol:isVersionOf uniprot:Q05655
	PKCD()
	#^ bqbiol:isVersionOf uniprot:P30086
	RKIP(apc,bCatenin~bCatenin~0,egf,freeEGFR~freeEGFR~0,null~null~0,p~P~0,tcf)
	#^ bqbiol:isVersionOf uniprot:P47736
	Rap1_Gap()
	#^ bqbiol:hasPart uniprot:P25054, uniprot:O15169, uniprot:P49841
	#^ bqbiol:hasProperty urn:miriam:bao:0002007
	pAPC_pAxin_GSK3b()
	#^ bqbiol:isVersionOf urn:miriam:chebi:0018348
	PIP2()
	X()
	#^ bqbiol:isVersionOf uniprot:P01112
	Ras()
	#^ bqbiol:hasPart uniprot:P35222, uniprot:P49841, uniprot:O15169, uniprot:P25054
	#^ bqbiol:hasProperty urn:miriam:bao:0002007
	pAPC_pAxin_GSK3b_pbCatenin()
end molecule types
begin seed species
	APC(axin,p~0,phospho~0,rkip) 5.8173724400000005e+25 # 96.602mol/L * 6.022e23/mol *1.0L #APC #APC
	APC(axin!367,p~0,phospho~0,rkip).Axin(apc!367,p~0) 9.033e+20 #original 0.0015mol/L  #APC_Axin #APCAxin
	APC_Axin_GSK3b() 4.57672e+21 #original 0.0076mol/L  #APC_Axin_GSK3b #APCAxinGSK3B
	RKIP(apc!370,bCatenin~bCatenin,egf,freeEGFR~0,null~0,p~0,tcf).APC(axin,p~0,phospho~0,rkip!370) 2.0710862400000002e+24 #original 3.4392mol/L  #APC_bCatenin #APCBCatenin
	Akt(p~0) 1.2044e+26 #original 200.0mol/L  #Akt #Akt
	Axin(apc,p~0) 4.8176000000000007e+20 #original 0.0008mol/L  #Axin #Axin
	RKIP(apc,bCatenin~bCatenin,egf,freeEGFR~0,null~0,p~0,tcf) 2.5727188400000003e+25 #original 42.722mol/L  #bCatenin #BCatenin
	bRaf(p~0) 1.2044e+26 #original 200.0mol/L  #bRaf #BRaf
	C3G() 3.0110000000000003e+26 #original 500.0mol/L  #C3G #C3G
	Dshi(Dsha~0) 6.022e+25 #original 100.0mol/L  #Dshi #Dshi
	EGF(rkip) 3.6132e+26 #original 600.0mol/L  #EGF #EGF
	ERK() 1.5657200000000002e+26 #original 260.0mol/L  #ERK #ERK
	GSK3b(p~0) 2.95903014e+25 #original 49.137mol/L  #GSK3b #GSK3B
	MEK(p~0) 4.0949600000000004e+26 #original 680.0mol/L  #MEK #MEK
	P90Rsk(p~0) 3.6132000000000002e+25 #original 60.0mol/L  #P90Rsk #P90Rsk
	PI3K(p~0) 6.022e+25 #original 100.0mol/L  #PI3K #PI3K
	PIP2() 4.2154e+26 #original 700.0mol/L  #PIP2 #PIP2
	PP2A() 1.4452800000000001e+26 #original 240.0mol/L  #PP2A #PP2A
	PTEN() 1.62594e+26 #original 270.0mol/L  #PTEN #PTEN
	RKIP(apc,bCatenin~0,egf,freeEGFR~0,null~0,p~0,tcf) 1.25913998e+25 #original 20.909mol/L  #RKIP #RKIP
	Raf1(p~0) 6.022e+25 #original 100.0mol/L  #Raf1 #Raf1
	RafPPtase() 3.6132000000000002e+25 #original 60.0mol/L  #RafPPtase #RafPPtase
	Rap1(p~0) 1.2044e+26 #original 200.0mol/L  #Rap1 #Rap1
	Rap1_Gap() 7.2264e+24 #original 12.0mol/L  #Rap1_Gap #Rap1Gap
	Ras() 6.022e+25 #original 100.0mol/L  #Ras #Ras
	Ras_Gap() 6.022e+25 #original 100.0mol/L  #Ras_Gap #RasGap
	SOS(p~0) 6.022e+25 #original 100.0mol/L  #SOS #SOS
	TCF(rkip) 3.72635338e+24 #original 6.1879mol/L  #TCF #TCF
	RKIP(apc,bCatenin~bCatenin,egf,freeEGFR~0,null~0,p~0,tcf!369).TCF(rkip!369) 5.30664662e+24 #original 8.8121mol/L  #bCatenin_TCF #TCFBCatenin
	X() 6.1803786e+24 #original 10.263mol/L  #X #X
	RKIP(apc,bCatenin~0,egf,freeEGFR~freeEGFR,null~0,p~0,tcf) 1.8066e+26 #original 300.0mol/L  #freeEGFR #fEGFR
	pAPC_pAxin_GSK3b() 9.21366e+21 #original 0.0153mol/L  #pAPC_pAxin_GSK3b #pAPCpAxinGSK3B
	pAPC_pAxin_GSK3b_bCatenin() 1.2044e+21 #original 0.002mol/L  #pAPC_pAxin_GSK3b_bCatenin #pAPCpAxinGSK3BBCatenin
	pAPC_pAxin_GSK3b_pbCatenin() 1.2044e+21 #original 0.002mol/L  #pAPC_pAxin_GSK3b_pbCatenin #pAPCpAxinGSK3BpBCatenin
	RKIP(apc,bCatenin~bCatenin,egf,freeEGFR~0,null~0,p~P,tcf) 5.9503382000000004e+23 #original 0.9881mol/L  #pbCatenin #pBCatenin
	$pEGFR() 3.0110000000000005e+22 #original 0.05mol/L  #pEGFR #pEGFR
	GSK3b(p~P) 5.15145968e+23 #original 0.85544mol/L  #pGSK3b #pGSK3B
	RKIP(apc,bCatenin~0,egf,freeEGFR~0,null~0,p~P,tcf) 5.1903618e+23 #original 0.8619mol/L  #pRKIP #pRKIP
	RKIP(apc,bCatenin~0,egf,freeEGFR~0,null~null,p~0,tcf) 6.022e+23 #original 1.0mol/L  #null #null
end seed species
begin observables
	Species APC APC(axin,p~0,phospho~0,rkip) #APC
	Species APC_Axin APC(axin!367,p~0,phospho~0,rkip).Axin(apc!367,p~0) #APC_Axin
	Species APC_Axin_GSK3b APC_Axin_GSK3b() #APC_Axin_GSK3b
	Species APC_bCatenin RKIP(apc!370,bCatenin~bCatenin,egf,freeEGFR~0,null~0,p~0,tcf).APC(axin,p~0,phospho~0,rkip!370) #APC_bCatenin
	Species Akt Akt(p~0) #Akt
	Species Axin Axin(apc,p~0) #Axin
	Species bCatenin RKIP(apc,bCatenin~bCatenin,egf,freeEGFR~0,null~0,p~0,tcf) #bCatenin
	Species bRaf bRaf(p~0) #bRaf
	Species C3G C3G() #C3G
	Species Dsha Dshi(Dsha~Dsha) #Dsha
	Species Dshi Dshi(Dsha~0) #Dshi
	Species EGF EGF(rkip) #EGF
	Species ERK ERK() #ERK
	Species GSK3b GSK3b(p~0) #GSK3b
	Species MEK MEK(p~0) #MEK
	Species P90Rsk P90Rsk(p~0) #P90Rsk
	Species PI3K PI3K(p~0) #PI3K
	Species PIP2 PIP2() #PIP2
	Species PIP3 PIP3() #PIP3
	Species PKCD PKCD() #PKCD
	Species PP2A PP2A() #PP2A
	Species PTEN PTEN() #PTEN
	Species RKIP RKIP(apc,bCatenin~0,egf,freeEGFR~0,null~0,p~0,tcf) #RKIP
	Species Raf1 Raf1(p~0) #Raf1
	Species RafPPtase RafPPtase() #RafPPtase
	Species Rap1 Rap1(p~0) #Rap1
	Species Rap1_Gap Rap1_Gap() #Rap1_Gap
	Species Ras Ras() #Ras
	Species Ras_Gap Ras_Gap() #Ras_Gap
	Species SOS SOS(p~0) #SOS
	Species TCF TCF(rkip) #TCF
	Species bCatenin_TCF RKIP(apc,bCatenin~bCatenin,egf,freeEGFR~0,null~0,p~0,tcf!369).TCF(rkip!369) #bCatenin_TCF
	Species X X() #X
	Species boundEGFR RKIP(apc,bCatenin~0,egf!368,freeEGFR~freeEGFR,null~0,p~0,tcf).EGF(rkip!368) #boundEGFR
	Species freeEGFR RKIP(apc,bCatenin~0,egf,freeEGFR~freeEGFR,null~0,p~0,tcf) #freeEGFR
	Species pAPC_pAxin_GSK3b pAPC_pAxin_GSK3b() #pAPC_pAxin_GSK3b
	Species pAPC_pAxin_GSK3b_bCatenin pAPC_pAxin_GSK3b_bCatenin() #pAPC_pAxin_GSK3b_bCatenin
	Species pAPC_pAxin_GSK3b_pbCatenin pAPC_pAxin_GSK3b_pbCatenin() #pAPC_pAxin_GSK3b_pbCatenin
	Species pAkt Akt(p~P) #pAkt
	Species pbCatenin RKIP(apc,bCatenin~bCatenin,egf,freeEGFR~0,null~0,p~P,tcf) #pbCatenin
	Species pbRaf bRaf(p~P) #pbRaf
	Species pC3G pC3G() #pC3G
	Species pEGFR pEGFR() #pEGFR
	Species pERK pERK() #pERK
	Species pGSK3b GSK3b(p~P) #pGSK3b
	Species pMEK MEK(p~P) #pMEK
	Species pP90Rsk P90Rsk(p~P) #pP90Rsk
	Species pPI3K PI3K(p~P) #pPI3K
	Species pRKIP RKIP(apc,bCatenin~0,egf,freeEGFR~0,null~0,p~P,tcf) #pRKIP
	Species pRaf1 Raf1(p~P) #pRaf1
	Species pRap1 Rap1(p~P) #pRap1
	Species pRas pRas() #pRas
	Species pSOS SOS(p~P) #pSOS
	Species null RKIP(apc,bCatenin~0,egf,freeEGFR~0,null~null,p~0,tcf) #null
end observables
begin functions
	fRate0() = V1
	fRate1() = Kcat10a/(Km10a + pRaf1)
	fRate2() = Kcat10b/(Km10b + pRaf1)
	fRate3() = Kcat11a/(Km11a + MEK)
	fRate4() = MEK*k11b1*pRaf1/(1 + (RKIP - pRKIP)^2/k11b2^2)
	fRate5() = Kcat12/(Km12 + pMEK)
	fRate6() = Kcat13/(ERK + Km13)
	fRate7() = Kcat14/(Km14 + pERK)
	fRate11() = Kcat16a/(Km16a + bRaf)
	fRate12() = Kcat16b/(Km16b + bRaf)
	fRate14() = Kcat18b/(Km18b + P90Rsk)
	fRate15() = Kcat19a/(Km19a + PI3K)
	fRate16() = Kcat19b*pRas/(Km19b + PI3K)
	fRate18() = Kcat20/(Km20 + PIP2)
	fRate19() = Kcat21/(Km21 + PIP3)
	fRate20() = Kcat22a/(Akt + Km22a)
	fRate21() = Kcat22b/(Km22b + pAkt)
	fRate22() = Kcat23a/(C3G + Km23a)
	fRate24() = Kcat24/(Km24 + Rap1)
	fRate25() = Kcat25/(Km25 + pRap1)
	fRate26() = V26a/((GSK3b/k26a)^2.5 + 1)
	fRate32() = W*k28
	fRate41() = k33c1 + k33c2*(bCatenin + bCatenin_TCF)
	fRate46() = V37b
	fRate49() = bCatenin_TCF*k39/(Km39^2 + bCatenin_TCF^2)
	fRate53() = (PKCD*k53 + boundEGFR*k51 + k52)/(1 + pERK/k54)
	fRate55() = Kcat6b/(Km6b + pSOS)
	fRate56() = Kcat7/(Km7 + Ras)
	fRate57() = V8a
	fRate58() = Kcat8b/(Km8b + pRas)
	fRate59() = Kcat9a/(Km9a + Raf1)
	fRate60() = W*k9b/(Km9b + Raf1)
	fRate61() = Kcat17a/(Km17a + RafPPtase)
	fRate62() = Kcat17b/(Km17b + pbRaf)
end functions
begin reaction rules
	v1_reactants_0: 0  -> pEGFR() -1*(fRate0())
	v1_products_0: 0  -> RKIP(apc,bCatenin~0,egf,freeEGFR~freeEGFR,null~0,p~0,tcf) fRate0()
	v10a: RafPPtase() + Raf1(p~P) -> RafPPtase() + Raf1(p~0) fRate1()
	v10b: Akt(p~P) + Raf1(p~P) -> Akt(p~P) + Raf1(p~0) fRate2()
	v11a: bRaf(p~P) + MEK(p~0) -> bRaf(p~P) + MEK(p~P) fRate3()
	v11b_reactants_0: 0  -> RKIP(apc,bCatenin~0,egf,freeEGFR~0,null~0,p~P,tcf) -1*(fRate4()) #Modifiers(RKIP)
	v11b_reactants_1: 0  -> Raf1(p~P) -1*(fRate4()) #Modifiers(RKIP)
	v11b_reactants_2: 0  -> MEK(p~0) -1*(fRate4()) #Modifiers(RKIP)
	v11b_products_0: 0  -> RKIP(apc,bCatenin~0,egf,freeEGFR~0,null~0,p~P,tcf) fRate4() #Modifiers(RKIP)
	v11b_products_1: 0  -> Raf1(p~P) fRate4() #Modifiers(RKIP)
	v11b_products_2: 0  -> MEK(p~P) fRate4() #Modifiers(RKIP)
	v12: MEK(p~P) + PP2A() -> MEK(p~0) + PP2A() fRate5()
	v13: MEK(p~P) + ERK() -> MEK(p~P) + pERK() fRate6()
	v14: pERK() + PP2A() -> ERK() + PP2A() fRate7()
	v15a: pERK() + RKIP(apc,bCatenin~0,egf,freeEGFR~0,null~0,p~0,tcf) <-> pERK() + RKIP(apc,bCatenin~0,egf,freeEGFR~0,null~0,p~P,tcf) k15a,k15a
	v15b: RKIP(apc,bCatenin~0,egf,freeEGFR~0,null~0,p~P,tcf) -> RKIP(apc,bCatenin~0,egf,freeEGFR~0,null~0,p~0,tcf) V15b
	v15c: RKIP(apc,bCatenin~0,egf,freeEGFR~0,null~0,p~0,tcf) -> RKIP(apc,bCatenin~0,egf,freeEGFR~0,null~null,p~0,tcf) k15c
	v16a: pRas() + bRaf(p~0) -> pRas() + bRaf(p~P) fRate11()
	v16b: Rap1(p~P) + bRaf(p~0) -> Rap1(p~P) + bRaf(p~P) fRate12()
	v18a: P90Rsk(p~P) -> P90Rsk(p~0) k18a
	v18b: pERK() + P90Rsk(p~0) -> pERK() + P90Rsk(p~P) fRate14()
	v19a: RKIP(apc,bCatenin~0,egf!368,freeEGFR~freeEGFR,null~0,p~0,tcf).EGF(rkip!368) + PI3K(p~0) -> RKIP(apc,bCatenin~0,egf!368,freeEGFR~freeEGFR,null~0,p~0,tcf).EGF(rkip!368) + PI3K(p~P) fRate15()
	v19b: PI3K(p~0) -> PI3K(p~P) fRate16() #Modifiers(pRas)
	v2: RKIP(apc,bCatenin~0,egf,freeEGFR~freeEGFR,null~0,p~0,tcf) + EGF(rkip) <-> RKIP(apc,bCatenin~0,egf!368,freeEGFR~freeEGFR,null~0,p~0,tcf).EGF(rkip!368) k21,k22
	v20: PI3K(p~P) + PIP2() -> PI3K(p~P) + PIP3() fRate18()
	v21: PTEN() + PIP3() -> PTEN() + PIP2() fRate19()
	v22a: PIP3() + Akt(p~0) -> PIP3() + Akt(p~P) fRate20()
	v22b: Akt(p~P) -> Akt(p~0) fRate21()
	v23a: RKIP(apc,bCatenin~0,egf!368,freeEGFR~freeEGFR,null~0,p~0,tcf).EGF(rkip!368) + C3G() -> RKIP(apc,bCatenin~0,egf!368,freeEGFR~freeEGFR,null~0,p~0,tcf).EGF(rkip!368) + pC3G() fRate22()
	v23b: pC3G() -> C3G() k23b
	v24: pC3G() + Rap1(p~0) -> pC3G() + Rap1(p~P) fRate24()
	v25: Rap1_Gap() + Rap1(p~P) -> Rap1_Gap() + Rap1(p~0) fRate25()
	v26a_reactants_0: 0  -> GSK3b(p~0) -1*(fRate26())
	v26a_products_0: 0  -> GSK3b(p~0) fRate26()
	v26a_products_1: 0  -> PKCD() fRate26()
	v26b: PKCD() -> RKIP(apc,bCatenin~0,egf,freeEGFR~0,null~null,p~0,tcf) k26b
	v27a: pERK() + GSK3b(p~0) -> pERK() + GSK3b(p~P) Kcat27a
	v27b: Akt(p~P) + GSK3b(p~0) -> Akt(p~P) + GSK3b(p~P) Kcat27b
	v27c: RKIP(apc,bCatenin~0,egf,freeEGFR~0,null~0,p~0,tcf) -> RKIP(apc,bCatenin~0,egf,freeEGFR~0,null~0,p~0,tcf) + GSK3b(p~0) k27c
	v27d: GSK3b(p~P) -> GSK3b(p~0) Kcat27d
	v28: Dshi(Dsha~0) -> Dshi(Dsha~Dsha) fRate32()
	v29: Dshi(Dsha~Dsha) -> Dshi(Dsha~0) k29
	v3: RKIP(apc,bCatenin~0,egf,freeEGFR~freeEGFR,null~0,p~0,tcf) -> RKIP(apc,bCatenin~0,egf,freeEGFR~0,null~null,p~0,tcf) k3
	v30: Dshi(Dsha~Dsha) + APC_Axin_GSK3b() -> GSK3b(p~0) + APC(axin!367,p~0,phospho~0,rkip).Axin(apc!367,p~0) + Dshi(Dsha~Dsha) k30
	v31: APC(axin!367,p~0,phospho~0,rkip).Axin(apc!367,p~0) + GSK3b(p~0) <-> APC_Axin_GSK3b() k311,k312
	v32a: APC_Axin_GSK3b() -> pAPC_pAxin_GSK3b() k32a
	v32b: pAPC_pAxin_GSK3b() -> APC_Axin_GSK3b() k32b
	v33a: APC(axin,p~0,phospho~0,rkip) + Axin(apc,p~0) <-> APC(axin!367,p~0,phospho~0,rkip).Axin(apc!367,p~0) k33a1,k33a2
	v33b: Axin(apc,p~0) -> RKIP(apc,bCatenin~0,egf,freeEGFR~0,null~null,p~0,tcf) k33b
	v33c_reactants_0: 0  -> RKIP(apc,bCatenin~bCatenin,egf,freeEGFR~0,null~0,p~0,tcf) -1*(fRate41())
	v33c_reactants_1: 0  -> RKIP(apc,bCatenin~bCatenin,egf,freeEGFR~0,null~0,p~0,tcf!369).TCF(rkip!369) -1*(fRate41())
	v33c_products_0: 0  -> RKIP(apc,bCatenin~bCatenin,egf,freeEGFR~0,null~0,p~0,tcf) fRate41()
	v33c_products_1: 0  -> RKIP(apc,bCatenin~bCatenin,egf,freeEGFR~0,null~0,p~0,tcf!369).TCF(rkip!369) fRate41()
	v33c_products_2: 0  -> Axin(apc,p~0) fRate41()
	v34: RKIP(apc,bCatenin~bCatenin,egf,freeEGFR~0,null~0,p~0,tcf) + pAPC_pAxin_GSK3b() <-> pAPC_pAxin_GSK3b_bCatenin() k341,k342
	v35: pAPC_pAxin_GSK3b_bCatenin() -> pAPC_pAxin_GSK3b_pbCatenin() k35
	v36: pAPC_pAxin_GSK3b_pbCatenin() -> RKIP(apc,bCatenin~bCatenin,egf,freeEGFR~0,null~0,p~P,tcf) + pAPC_pAxin_GSK3b() k36
	v37a: RKIP(apc,bCatenin~bCatenin,egf,freeEGFR~0,null~0,p~0,tcf) + APC(axin,p~0,phospho~0,rkip) <-> RKIP(apc!370,bCatenin~bCatenin,egf,freeEGFR~0,null~0,p~0,tcf).APC(axin,p~0,phospho~0,rkip!370) k37a1,k37a2
	v37b_reactants_0: 0  -> RKIP(apc,bCatenin~0,egf,freeEGFR~0,null~null,p~0,tcf) -1*(fRate46())
	v37b_products_0: 0  -> RKIP(apc,bCatenin~bCatenin,egf,freeEGFR~0,null~0,p~0,tcf) fRate46()
	v37c: RKIP(apc,bCatenin~bCatenin,egf,freeEGFR~0,null~0,p~0,tcf) -> RKIP(apc,bCatenin~0,egf,freeEGFR~0,null~null,p~0,tcf) k37c
	v38: TCF(rkip) + RKIP(apc,bCatenin~bCatenin,egf,freeEGFR~0,null~0,p~0,tcf) <-> RKIP(apc,bCatenin~bCatenin,egf,freeEGFR~0,null~0,p~0,tcf!369).TCF(rkip!369) k381,k382
	v39: RKIP(apc,bCatenin~bCatenin,egf,freeEGFR~0,null~0,p~0,tcf!369).TCF(rkip!369) -> X() + RKIP(apc,bCatenin~bCatenin,egf,freeEGFR~0,null~0,p~0,tcf!369).TCF(rkip!369) fRate49()
	v4: RKIP(apc,bCatenin~0,egf!368,freeEGFR~freeEGFR,null~0,p~0,tcf).EGF(rkip!368) -> RKIP(apc,bCatenin~0,egf,freeEGFR~0,null~null,p~0,tcf) k4
	v40: X() -> RKIP(apc,bCatenin~0,egf,freeEGFR~0,null~null,p~0,tcf) k40
	v41: RKIP(apc,bCatenin~bCatenin,egf,freeEGFR~0,null~0,p~P,tcf) -> RKIP(apc,bCatenin~0,egf,freeEGFR~0,null~null,p~0,tcf) k41
	v5_reactants_0: 0  -> PKCD() -1*(fRate53())
	v5_reactants_1: 0  -> pERK() -1*(fRate53())
	v5_reactants_2: 0  -> RKIP(apc,bCatenin~0,egf!368,freeEGFR~freeEGFR,null~0,p~0,tcf).EGF(rkip!368) -1*(fRate53())
	v5_reactants_3: 0  -> SOS(p~0) -1*(fRate53())
	v5_products_0: 0  -> PKCD() fRate53()
	v5_products_1: 0  -> pERK() fRate53()
	v5_products_2: 0  -> RKIP(apc,bCatenin~0,egf!368,freeEGFR~freeEGFR,null~0,p~0,tcf).EGF(rkip!368) fRate53()
	v5_products_3: 0  -> SOS(p~P) fRate53()
	v6a: SOS(p~P) -> SOS(p~0) k6a
	v6b: P90Rsk(p~P) + SOS(p~P) -> P90Rsk(p~P) + SOS(p~0) fRate55()
	v7: SOS(p~P) + Ras() -> SOS(p~P) + pRas() fRate56()
	v8a_reactants_0: 0  -> RKIP(apc,bCatenin~0,egf,freeEGFR~0,null~null,p~0,tcf) -1*(fRate57())
	v8a_products_0: 0  -> Ras() fRate57()
	v8b: Ras_Gap() + pRas() -> Ras_Gap() + Ras() fRate58()
	v9a: pRas() + Raf1(p~0) -> pRas() + Raf1(p~P) fRate59()
	v9b: X() + Raf1(p~0) -> X() + Raf1(p~P) fRate60()
	bRaf_dephosphorylation__RafPPtase_modifier: RafPPtase() + bRaf(p~P) -> RafPPtase() + bRaf(p~0) fRate61()
	bRaf_dephosphorylation__pAkt_modifier: Akt(p~P) + bRaf(p~P) -> Akt(p~P) + bRaf(p~0) fRate62()
end reaction rules
end model
