###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000661', 'http://identifiers.org/biomodels.db/MODEL1006230046']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/12208611']
#@BQM_UNKNOWN:['http://identifiers.org/mamo/MAMO_0000046']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:1902044', 'http://identifiers.org/go/GO:0002418', 'http://identifiers.org/pw/PW:0000106']
#@creatorEmail:'c.lloyd@auckland.ac.nz'
#@creatorName:'Lloyd Catherine'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 7 molecules and 17 reactions. The translated model has 7 molecules and 17 rules'
###
begin model
begin parameters
	k1 8.38e-10
	k2 0.006
	k3 5.9413
	k4 0.35
	k5 2.52e-09
	k6 2244.0
	k7 0.35
	k8 19200000000.0
	k9 8730000000.0
	k10 3110.0
	k11 13.9
end parameters
begin compartments
	#volume units: L
	compartment 3 1.0
	Tumour_cell 3 1.0 #Tumour cell
	T_Lymphocyte_cell 3 1.0 #T-Lymphocyte cell
end compartments
begin molecule types
	#^ bqbiol:isVersionOf uniprot:P25445
	#^ bqbiol:occursIn ncit:C14070
	FasR__RT__()
	#^ bqbiol:isVersionOf uniprot:P25445
	#^ bqbiol:occursIn ncit:C14070
	FasR__Rm__()
	#^ bqbiol:isVersionOf chebi:CHEBI:17089, uniprot:P48023
	#^ bqbiol:occursIn ncit:C14070
	mFasL__LT__()
	#^ bqbiol:isVersionOf ncit:C104083
	T_cells__T__()
	#^ bqbiol:isVersionOf chebi:CHEBI:17089, uniprot:P48023
	#^ bqbiol:occursIn ncit:C14070
	mFasL__Lm__()
	#^ bqbiol:isVersionOf pr:PR:000000547
	sFasL__SL__()
	#^ bqbiol:isVersionOf ncit:C12922
	Tumourcells__m__()
end molecule types
begin seed species
	@compartment:T_cells__T__()@compartment 3.011000000000006e+26 # 500.000000000001mol/L * 6.022e23/mol *1.0L #T_cells__T__ #T
	@T_Lymphocyte_cell:FasR__RT__()@T_Lymphocyte_cell 6.022000000000061e+27 #original 10000.0000000001mol/L  #FasR__RT__ #RT
	@compartment:Tumourcells__m__()@compartment 3.011000000000006e+26 #original 500.000000000001mol/L  #Tumourcells__m__ #m
	@Tumour_cell:mFasL__Lm__()@Tumour_cell 6.0220000000000006e+26 #original 1000.0mol/L  #mFasL__Lm__ #Lm
	@Tumour_cell:FasR__Rm__()@Tumour_cell 6.0220000000000006e+26 #original 1000.0mol/L  #FasR__Rm__ #Rm
end seed species
begin observables
	Species T_cells__T___compartment @compartment:T_cells__T__()@compartment #T-cells (T)
	Species mFasL__LT___compartment @compartment:mFasL__LT__()@compartment #mFasL (LT)
	Species FasR__RT___T_Lymphocyte_cell @T_Lymphocyte_cell:FasR__RT__()@T_Lymphocyte_cell #FasR (RT)
	Species Tumourcells__m___compartment @compartment:Tumourcells__m__()@compartment #Tumour cells (m)
	Species mFasL__Lm___Tumour_cell @Tumour_cell:mFasL__Lm__()@Tumour_cell #mFasL (Lm)
	Species FasR__Rm___Tumour_cell @Tumour_cell:FasR__Rm__()@Tumour_cell #FasR (Rm)
	Species sFasL__SL___compartment @compartment:sFasL__SL__()@compartment #sFasL (SL)
end observables
begin functions
	fRate0() = FasR__RT___T_Lymphocyte_cell*Tumourcells__m___compartment*k1*mFasL__Lm___Tumour_cell
	fRate1() = FasR__Rm___Tumour_cell*T_cells__T___compartment*k1*mFasL__LT___compartment
	fRate8() = T_cells__T___compartment*Tumourcells__m___compartment*k2
	fRate9() = k8*sFasL__SL___compartment
	fRate10() = k8*sFasL__SL___compartment
	fRate11() = mFasL__LT___compartment*(k3 + k4)
	fRate12() = mFasL__Lm___Tumour_cell*(k3 + k4)
	fRate13() = FasR__Rm___Tumour_cell*T_cells__T___compartment*Tumourcells__m___compartment*k5
	fRate14() = FasR__RT___T_Lymphocyte_cell*T_cells__T___compartment*Tumourcells__m___compartment*k5
	fRate15() = k3*(T_cells__T___compartment*mFasL__LT___compartment + Tumourcells__m___compartment*mFasL__Lm___Tumour_cell)
	fRate16() = k9*sFasL__SL___compartment*(FasR__RT___T_Lymphocyte_cell*T_cells__T___compartment + FasR__Rm___Tumour_cell*Tumourcells__m___compartment)
end functions
begin reaction rules
	T_cell_degradation: T_cells__T__()@compartment -> 0  fRate0() #Modifiers(m, Lm, RT)
	Tumour_cell_degradation: Tumourcells__m__()@compartment -> 0  fRate1() #Modifiers(T, LT, Rm)
	SL_degradation: sFasL__SL__()@compartment -> 0  k11
	Lm_synthesis: 0  -> mFasL__Lm__()@Tumour_cell k10
	RT_synthesis: 0  -> FasR__RT__()@T_Lymphocyte_cell k6
	Rm_synthesis: 0  -> FasR__Rm__()@Tumour_cell k6
	RT_degradation: FasR__RT__()@T_Lymphocyte_cell -> 0  k7
	Rm_degradation: FasR__Rm__()@Tumour_cell -> 0  k7
	LT_synthesis: 0  -> mFasL__LT__()@compartment fRate8() #Modifiers(T, m)
	RT_degradation__SL_modifier: FasR__RT__()@T_Lymphocyte_cell -> 0  fRate9() #Modifiers(SL)
	Rm_degradation__SL_modifier: FasR__Rm__()@Tumour_cell -> 0  fRate10() #Modifiers(SL)
	LT_degradation_reactants_0: 0  -> mFasL__LT__()@compartment -1*(fRate11())
	Lm_degradation_reactants_0: 0  -> mFasL__Lm__()@Tumour_cell -1*(fRate12())
	LT_degradation__m__T_and_Rm_modifiers: mFasL__LT__()@compartment -> 0  fRate13() #Modifiers(m, T, Rm)
	Lm_degradation__m__T_and_RT_modifiers: mFasL__Lm__()@Tumour_cell -> 0  fRate14() #Modifiers(m, T, RT)
	SL_synthesis: 0  -> sFasL__SL__()@compartment fRate15() #Modifiers(Lm, m, LT, T)
	SL_degradation__Rm__m__RT__T_and_SL_modifiers_reactants_0: 0  -> sFasL__SL__()@compartment -1*(fRate16()) #Modifiers(Rm, m, RT, T)
end reaction rules
end model
