###
#@BQB_HAS_PART:['http://identifiers.org/efo/0007815', 'http://identifiers.org/kegg.pathway/map04151', 'http://identifiers.org/reactome/R-HSA-2219528', 'http://identifiers.org/reactome/R-HSA-5683057', 'http://identifiers.org/kegg.pathway/map04010']
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000666', 'http://identifiers.org/biomodels.db/MODEL1609190000']
#@BQB_OCCURS_IN:['http://identifiers.org/bto/BTO:0000848']
#@BQB_HAS_PROPERTY:['http://identifiers.org/efo/0000756']
#@BQB_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/27015094']
#@creatorEmail:'mroberts@ebi.ac.uk'
#@creatorName:'Roberts Matthew Grant'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 48 molecules and 48 reactions. The translated model has 21 molecules and 50 rules'
###
begin model
begin parameters
	PP2AActive 7.2264000000000005e+25 #original 120000.0substance/volume
	Raf1PPtase 7.2264000000000005e+25 #original 120000.0substance/volume
	RasGapActive 7.2264000000000005e+25 #original 120000.0substance/volume
	Rap1Gap 7.2264000000000005e+25 #original 120000.0substance/volume
	PTENActive 7.2264000000000005e+25 #original 120000.0substance/volume
	HSP90_Cdc37Active 7.2264000000000005e+25 #original 120000.0substance/volume
	PHLPPActive 7.2264000000000005e+25 #original 120000.0substance/volume
	mTORC2Active 7.2264000000000005e+25 #original 120000.0substance/volume
	TCL1Active 7.2264000000000005e+25 #original 120000.0substance/volume
	CTMPActive 7.2264000000000005e+25 #original 120000.0substance/volume
	r1_k1 0.000022
	r1_k2 0.121008
	r2_Kcat 694.731000
	r2_km 6086070.000000
	r3_Kcat 32.344000
	r3_km 35954.300000
	r4_Kcat 1509.360000
	r4_km 1432410.000000
	r5_Kcat 0.884096
	r5_km 62464.600000
	r6_Kcat 0.126329
	r6_km 1061.710000
	r7_Kcat 185.759000
	r7_km 4768350.000000
	r8_Kcat 2.832430
	r8_km 518753.000000
	r9_Kcat 9.853670
	r9_km 1007340.000000
	r10_Kcat 8.891200
	r10_km 3496490.000000
	r11_Kcat 0.021370
	r11_km 763523.000000
	r12_k1 0.005000
	r13_Kcat 1611.970000
	r13_km 896896.000000
	r14_Kcat 10.673700
	r14_km 184912.000000
	r15_Kcat 0.077107
	r15_km 272056.000000
	r16_k1 0.005000
	r17_Kcat 0.056628
	r17_km 653951.000000
	r18_Kcat 15.121200
	r18_km 119355.000000
	r19_k1 0.200000
	r20_Kcat 694.731000
	r20_km 6086070.000000
	r21_k1 2.500000
	r22_Kcat 32.344000
	r22_km 35954.300000
	r23_Kcat 1509.360000
	r23_km 1432410.000000
	r24_Kcat 185.759000
	r24_km 4768350.000000
	r25_v 100.000000
	r26_k1 0.001250
	r27_Kcat 0.056628
	r27_km 653951.000000
	r28_Kcat 2.832430
	r28_km 518753.000000
	r29_Kcat 0.056628
	r29_km 653951.000000
	r30_Kcat 0.077107
	r30_km 272056.000000
	r31_Kcat 10.673700
	r31_km 184912.000000
	r32_Kcat 9.853670
	r32_km 1007340.000000
	r33_k1 2.500000
	r34_Kcat 0.056628
	r34_km 653951.000000
	r35_Kcat 0.056628
	r35_km 653951.000000
	r36_Kcat 0.126329
	r36_km 1061.710000
	r37_Kcat 0.056628
	r37_km 653951.000000
	r38_Kcat 0.056628
	r38_km 653951.000000
	r39_Kcat 0.056628
	r39_km 653951.000000
	r40_Kcat 0.126329
	r40_km 1061.710000
	r41_Kcat 8.891200
	r41_km 3496490.000000
	r42_Kcat 0.021370
	r42_km 763523.000000
	r43_Kcat 15.121200
	r43_km 119355.000000
	r44_Kcat 0.021370
	r44_km 763523.000000
	r45_Kcat 1611.970000
	r45_km 896896.000000
	r46_k1 0.000019
	r47_Kcat 31900000000000.000000
	r47_km 3200.000000
	r48_v 100.000000
end parameters
begin molecule types
	#^ bqbiol:hasPart uniprot:P42345
	#^ bqbiol:isVersionOf go:GO:0031931
	mTORC1Active(in~IN~0)
	#^ bqbiol:isVersionOf pr:PR:000029187, ec-code:2.7.11.1
	P90RskActive(in~IN~0)
	#^ bqbiol:isVersionOf uniprot:P28482, kegg.orthology:K05111
	ErkActive(in~IN~0)
	#^ bqbiol:isVersionOf ncit:C17660, ec-code:2.7.10.1
	freeRTK(gf)
	#^ bqbiol:isVersionOf ec-code:2.7.11.1, uniprot:P04049, kegg.orthology:K04366
	Raf1Active(in~IN~0)
	#^ bqbiol:isVersionOf uniprot:P23443, ec-code:2.7.11.1, kegg.orthology:K04688
	S6K1Active(in~IN~0)
	#^ bqbiol:isVersionOf uniprot:P62834, kegg.orthology:K04353
	Rap1Active(in~IN~0)
	#^ bqbiol:isVersionOf kegg.orthology:K04365, uniprot:P15056, ec-code:2.7.11.1
	#^ bqbiol:hasProperty ncit:C40430
	bRafMutated(inactive~INACTIVE~0)
	#^ bqbiol:isVersionOf kegg.orthology:K12077, uniprot:Q15118, ec-code:2.7.11.2
	PDK1Active(in~IN~0)
	#^ bqbiol:isVersionOf pr:PR:000029189, ec-code:2.7.11.1
	AktActive(in~IN~0)
	#^ bqbiol:isVersionOf uniprot:Q02750, ec-code:2.7.12.2, kegg.orthology:K04368
	MekActive(in~IN~0)
	#^ bqbiol:isVersionOf ncit:C20424
	GF(freertk)
	#^ bqbiol:isVersionOf kegg.compound:C05981
	PIP3Active(in~IN~0)
	#^ bqbiol:isVersionOf kegg.orthology:K07829, uniprot:P10301
	RasActive(in~IN~0)
	#^ bqbiol:isVersionOf kegg.orthology:K03099, uniprot:Q07889
	SosActive(in~IN~0)
	#^ bqbiol:isVersionOf uniprot:Q13905, kegg.orthology:K06277
	C3GActive(in~IN~0)
	proRTK()
	probRafMutated()
	#^ bqbiol:isVersionOf kegg.orthology:K16172, uniprot:P35568
	IRS1Active(in~IN~0)
	#^ bqbiol:isVersionOf ec-code:2.7.1.137, kegg.orthology:K00914
	PI3KActive(in~IN~0)
	#^ bqbiol:isVersionOf kegg.drug:D10064, chebi:CHEBI:75045
	Dabrafenib()
end molecule types
begin seed species
	freeRTK(gf) 4.817600000000006e+25 # (80000.0000000001 * 0.001)mol/L * 6.022e23/mol *1.0L #freeRTK #species_1
	SosActive(in~IN) 7.2264000000000005e+25 #original 120000.0substance/volume  #SosInactive #species_3
	RasActive(in~IN) 7.2264000000000005e+25 #original 120000.0substance/volume  #RasInactive #species_5
	Raf1Active(in~IN) 7.2264000000000005e+25 #original 120000.0substance/volume  #Raf1Inactive #species_7
	MekActive(in~IN) 3.6132e+26 #original 600000.0substance/volume  #MekInactive #species_9
	ErkActive(in~IN) 3.6132e+26 #original 600000.0substance/volume  #ErkInactive #species_11
	P90RskActive(in~IN) 7.2264000000000005e+25 #original 120000.0substance/volume  #P90RskInactive #species_13
	PI3KActive(in~IN) 7.2264000000000005e+25 #original 120000.0substance/volume  #PI3KInactive #species_15
	AktActive(in~IN) 7.2264000000000005e+25 #original 120000.0substance/volume  #AktInactive #species_17
	C3GActive(in~IN) 7.2264000000000005e+25 #original 120000.0substance/volume  #C3GInactive #species_20
	Rap1Active(in~IN) 7.2264000000000005e+25 #original 120000.0substance/volume  #Rap1Inactive #species_22
	$GF(freertk) 6.0232044e+27 #original 10002000.0substance/volume  #GF #species_25
	$proRTK() 6.022e+20 #original 1.0substance/volume  #proRTK #species_30
	PIP3Active(in~IN) 7.2264000000000005e+25 #original 120000.0substance/volume  #PIP3Inactive #PIP3Inactive
	IRS1Active(in~IN) 7.2264000000000005e+25 #original 120000.0substance/volume  #IRS1Inactive #IRS1Inactive
	PDK1Active(in~IN) 7.2264000000000005e+25 #original 120000.0substance/volume  #PDK1Inactive #PDK1Inactive
	mTORC1Active(in~IN) 7.2264000000000005e+25 #original 120000.0substance/volume  #mTORC1Inactive #mTORC1Inactive
	S6K1Active(in~IN) 7.2264000000000005e+25 #original 120000.0substance/volume  #S6K1Inactive #S6K1Inactive
	bRafMutated(inactive~0) 7.2264000000000005e+25 #original 120000.0substance/volume  #bRafMutated #bRafMutated
	Dabrafenib() 75275000000.00002 #original 1.25e-10substance/volume  #Dabrafenib #Dabrafenib
	bRafMutated(inactive~INACTIVE) 6.022e+20 #original 1.0substance/volume  #bRafMutatedInactive #bRafMutatedInactive
	$probRafMutated() 6.022e+20 #original 1.0substance/volume  #probRafMutated #probRafMutated
end seed species
begin observables
	Species boundRTK freeRTK(gf!380).GF(freertk!380) #boundRTK
	Species freeRTK freeRTK(gf) #freeRTK
	Species SosActive SosActive(in~0) #SosActive
	Species SosInactive SosActive(in~IN) #SosInactive
	Species RasActive RasActive(in~0) #RasActive
	Species RasInactive RasActive(in~IN) #RasInactive
	Species Raf1Active Raf1Active(in~0) #Raf1Active
	Species Raf1Inactive Raf1Active(in~IN) #Raf1Inactive
	Species MekActive MekActive(in~0) #MekActive
	Species MekInactive MekActive(in~IN) #MekInactive
	Species ErkActive ErkActive(in~0) #ErkActive
	Species ErkInactive ErkActive(in~IN) #ErkInactive
	Species P90RskActive P90RskActive(in~0) #P90RskActive
	Species P90RskInactive P90RskActive(in~IN) #P90RskInactive
	Species PI3KActive PI3KActive(in~0) #PI3KActive
	Species PI3KInactive PI3KActive(in~IN) #PI3KInactive
	Species AktActive AktActive(in~0) #AktActive
	Species AktInactive AktActive(in~IN) #AktInactive
	Species C3GActive C3GActive(in~0) #C3GActive
	Species C3GInactive C3GActive(in~IN) #C3GInactive
	Species Rap1Active Rap1Active(in~0) #Rap1Active
	Species Rap1Inactive Rap1Active(in~IN) #Rap1Inactive
	Species GF GF(freertk) #GF
	Species proRTK proRTK() #proRTK
	Species PIP3Active PIP3Active(in~0) #PIP3Active
	Species PIP3Inactive PIP3Active(in~IN) #PIP3Inactive
	Species IRS1Active IRS1Active(in~0) #IRS1Active
	Species IRS1Inactive IRS1Active(in~IN) #IRS1Inactive
	Species PDK1Inactive PDK1Active(in~IN) #PDK1Inactive
	Species PDK1Active PDK1Active(in~0) #PDK1Active
	Species mTORC1Active mTORC1Active(in~0) #mTORC1Active
	Species mTORC1Inactive mTORC1Active(in~IN) #mTORC1Inactive
	Species S6K1Active S6K1Active(in~0) #S6K1Active
	Species S6K1Inactive S6K1Active(in~IN) #S6K1Inactive
	Species bRafMutated bRafMutated(inactive~0) #bRafMutated
	Species Dabrafenib Dabrafenib() #Dabrafenib
	Species bRafMutatedInactive bRafMutated(inactive~INACTIVE) #bRafMutatedInactive
	Species probRafMutated probRafMutated() #probRafMutated
end observables
begin functions
	fRate1() = 694.731*boundRTK/(SosInactive + 6086070.0)
	fRate2() = 32.344*SosActive/(RasInactive + 35954.3)
	fRate3() = 1509.36*RasGapActive/(RasActive + 1432410.0)
	fRate4() = 0.884096*RasActive/(Raf1Inactive + 62464.6)
	fRate5() = 0.126329*Raf1PPtase/(Raf1Active + 1061.71)
	fRate6() = 185.759*Raf1Active/(MekInactive + 4768350.0)
	fRate7() = 2.83243*PP2AActive/(MekActive + 518753.0)
	fRate8() = 9.85367*MekActive/(ErkInactive + 1007340.0)
	fRate9() = 8.8912*PP2AActive/(ErkActive + 3496490.0)
	fRate10() = 0.0213697*ErkActive/(P90RskInactive + 763523.0)
	fRate12() = 1611.97*P90RskActive/(SosActive + 896896.0)
	fRate13() = 10.6737*boundRTK/(PI3KInactive + 184912.0)
	fRate14() = 0.0771067*RasActive/(PI3KInactive + 272056.0)
	fRate16() = 0.0566279*PI3KActive/(AktInactive + 653951.0)
	fRate17() = 15.1212*AktActive/(Raf1Active + 119355.0)
	fRate19() = 694.731*boundRTK/(C3GInactive + 6086070.0)
	fRate21() = 32.344*C3GActive/(Rap1Inactive + 35954.3)
	fRate22() = 1509.36*Rap1Gap/(Rap1Active + 1432410.0)
	fRate23() = 185.759*bRafMutated/(MekInactive + 4768350.0)
	fRate24() = 100.0
	fRate26() = 0.0566279*PI3KActive/(PIP3Inactive + 653951.0)
	fRate27() = 2.83243*PTENActive/(PIP3Active + 518753.0)
	fRate28() = 0.0566279*PIP3Active/(AktInactive + 653951.0)
	fRate29() = 0.0771067*IRS1Active/(PI3KInactive + 272056.0)
	fRate30() = 10.6737*boundRTK/(IRS1Inactive + 184912.0)
	fRate31() = 9.85367*PIP3Active/(PDK1Inactive + 1007340.0)
	fRate33() = 0.0566279*PDK1Active/(AktInactive + 653951.0)
	fRate34() = 0.0566279*HSP90_Cdc37Active/(AktInactive + 653951.0)
	fRate35() = 0.126329*PHLPPActive/(AktActive + 1061.71)
	fRate36() = 0.0566279*mTORC2Active/(AktInactive + 653951.0)
	fRate37() = 0.0566279*TCL1Active/(AktInactive + 653951.0)
	fRate38() = 0.0566279*CTMPActive/(AktActive + 653951.0)
	fRate39() = 0.126329*PP2AActive/(AktActive + 1061.71)
	fRate40() = 8.8912*Raf1Active/(ErkActive + 3496490.0)
	fRate41() = 0.0213697*ErkActive/(SosActive + 763523.0)
	fRate42() = 15.1212*AktActive/(mTORC1Inactive + 119355.0)
	fRate43() = 0.0213697*mTORC1Active/(S6K1Inactive + 763523.0)
	fRate44() = 1611.97*S6K1Active/(IRS1Active + 896896.0)
	fRate46() = 31900000000000.0*Dabrafenib/(bRafMutated + 3200.0)
	fRate47() = 100.0
end functions
begin reaction rules
	reaction_0: GF(freertk) + freeRTK(gf) <-> freeRTK(gf!380).GF(freertk!380) r1_k1,r1_k2
	reaction_1: SosActive(in~IN) -> SosActive(in~0) fRate1() #Modifiers(species_0)
	reaction_3: RasActive(in~IN) -> RasActive(in~0) fRate2() #Modifiers(species_2)
	reaction_4: RasActive(in~0) -> RasActive(in~IN) fRate3() #Modifiers(species_28)
	reaction_5: Raf1Active(in~IN) -> Raf1Active(in~0) fRate4() #Modifiers(species_4)
	reaction_6: Raf1Active(in~0) -> Raf1Active(in~IN) fRate5() #Modifiers(species_27)
	reaction_7: MekActive(in~IN) -> MekActive(in~0) fRate6() #Modifiers(species_6)
	reaction_8: MekActive(in~0) -> MekActive(in~IN) fRate7() #Modifiers(species_26)
	reaction_9: ErkActive(in~IN) -> ErkActive(in~0) fRate8() #Modifiers(species_8)
	reaction_10: ErkActive(in~0) -> ErkActive(in~IN) fRate9() #Modifiers(species_26)
	reaction_11: P90RskActive(in~IN) -> P90RskActive(in~0) fRate10() #Modifiers(species_10)
	reaction_12: P90RskActive(in~0) -> P90RskActive(in~IN) r12_k1
	reaction_13: SosActive(in~0) -> SosActive(in~IN) fRate12() #Modifiers(species_12)
	reaction_14: PI3KActive(in~IN) -> PI3KActive(in~0) fRate13() #Modifiers(species_0)
	reaction_15: PI3KActive(in~IN) -> PI3KActive(in~0) fRate14() #Modifiers(species_4)
	reaction_16: PI3KActive(in~0) -> PI3KActive(in~IN) r16_k1
	reaction_17: AktActive(in~IN) -> AktActive(in~0) fRate16() #Modifiers(species_14)
	reaction_19: Raf1Active(in~0) -> Raf1Active(in~IN) fRate17() #Modifiers(species_16)
	reaction_20: freeRTK(gf!380).GF(freertk!380) -> 0  r19_k1
	reaction_21: C3GActive(in~IN) -> C3GActive(in~0) fRate19() #Modifiers(species_0)
	reaction_22: C3GActive(in~0) -> C3GActive(in~IN) r21_k1
	reaction_23: Rap1Active(in~IN) -> Rap1Active(in~0) fRate21() #Modifiers(species_19)
	reaction_24: Rap1Active(in~0) -> Rap1Active(in~IN) fRate22() #Modifiers(species_29)
	reaction_27: MekActive(in~IN) -> MekActive(in~0) fRate23() #Modifiers(bRafMutated)
	reaction_28_reactants_0: 0  -> proRTK() -1*(fRate24())
	reaction_28_products_0: 0  -> freeRTK(gf) fRate24()
	reaction_29: freeRTK(gf) -> 0  r26_k1
	PIP3_Activation: PIP3Active(in~IN) -> PIP3Active(in~0) fRate26() #Modifiers(species_14)
	PIP3_Feedback_Deactivation_PTEN: PIP3Active(in~0) -> PIP3Active(in~IN) fRate27() #Modifiers(PTENActive)
	Akt_Activation_PIP3: AktActive(in~IN) -> AktActive(in~0) fRate28() #Modifiers(PIP3Active)
	PI3K_Activation_IRS1: PI3KActive(in~IN) -> PI3KActive(in~0) fRate29() #Modifiers(IRS1Active)
	IRS1_Activation: IRS1Active(in~IN) -> IRS1Active(in~0) fRate30() #Modifiers(species_0)
	PDK1_Activation: PDK1Active(in~IN) -> PDK1Active(in~0) fRate31() #Modifiers(PIP3Active)
	PDK1_Deactivation: PDK1Active(in~0) -> PDK1Active(in~IN) r33_k1
	Akt_Activation_PDK1: AktActive(in~IN) -> AktActive(in~0) fRate33() #Modifiers(PDK1Active)
	Akt_Feedback_Activation_HSP90_Cdc37: AktActive(in~IN) -> AktActive(in~0) fRate34() #Modifiers(HSP90_Cdc37Active)
	Akt_Feedback_Deactivation_PHLPP: AktActive(in~0) -> AktActive(in~IN) fRate35() #Modifiers(PHLPPActive)
	Akt_Feedback_Activation_mTORC2: AktActive(in~IN) -> AktActive(in~0) fRate36() #Modifiers(mTORC2Active)
	Akt_Feedback_Activation_TCL1: AktActive(in~IN) -> AktActive(in~0) fRate37() #Modifiers(TCL1Active)
	Akt_Feedback_Deactivation_CTMP: AktActive(in~0) -> AktActive(in~IN) fRate38() #Modifiers(CTMPActive)
	Akt_Feedback_Deactivation_PP2A: AktActive(in~0) -> AktActive(in~IN) fRate39() #Modifiers(species_26)
	Erk_Feedback_Deactivation_Raf1: ErkActive(in~0) -> ErkActive(in~IN) fRate40() #Modifiers(species_6)
	Sos_Feedback_Deactivation_Erk: SosActive(in~0) -> SosActive(in~IN) fRate41() #Modifiers(species_10)
	mTORC1_Activation_Akt: mTORC1Active(in~IN) -> mTORC1Active(in~0) fRate42() #Modifiers(species_16)
	S6K1_Activation_mTORC1: S6K1Active(in~IN) -> S6K1Active(in~0) fRate43() #Modifiers(mTORC1Active)
	IRS1_Feedback_Deactivation_S6K1: IRS1Active(in~0) -> IRS1Active(in~IN) fRate44() #Modifiers(S6K1Active)
	Dabrafenib_degradation: Dabrafenib() -> 0  r46_k1
	bRaf_Deactivation_Dabrafenib: bRafMutated(inactive~0) -> bRafMutated(inactive~INACTIVE) fRate46() #Modifiers(Dabrafenib)
	bRafMutated_Production_reactants_0: 0  -> probRafMutated() -1*(fRate47())
	bRafMutated_Production_products_0: 0  -> bRafMutated(inactive~0) fRate47()
end reaction rules
end model
