###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1604270000', 'http://identifiers.org/biomodels.db/BIOMD0000000668']
#@BQM_IS_INSTANCE_OF:['http://identifiers.org/kegg.drug/D10417', 'http://identifiers.org/biomodels.db/MODEL1604270000', 'http://identifiers.org/kegg.drug/D02368', 'http://identifiers.org/ncit/C191', 'http://identifiers.org/bto/BTO:0000988']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/26252969']
#@BQB_HAS_PART:['http://identifiers.org/kegg.drug/D10417', 'http://identifiers.org/kegg.drug/D02368']
#@BQB_OCCURS_IN:['http://identifiers.org/bto/BTO:0000988']
#@BQB_IS_DESCRIBED_BY:['http://identifiers.org/ncit/C191', 'http://identifiers.org/pubmed/26252969']
#@creatorEmail:'mroberts@ebi.ac.uk'
#@creatorName:'Roberts Matthew Grant'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 14 molecules and 10 reactions. The translated model has 4 molecules and 12 rules'
###
begin model
begin parameters
	Ra_0 307000.0
	Rd_0 1940.0
	Rss 5490000.0
	kg 0.0209
	kd 0.000385
	Imax_g 0.991
	Imax_b 0.375
	IC50_g 20.8
	IC50_b 145.0
	Hi_g 3.57
	Hi_b 1.06
	Smax_g 4.09
	Smax_b 17.5
	SC50_g 14.0
	SC50_b 168.0
	Hs_g 5.0
	Hs_b 0.984
	ktau_g 0.086
	ktau_b 0.611
	Psi_i if((neq((0),0)&&neq((0),0)),(0.583),(1))
	Psi_s if((neq((0),0)&&neq((0),0)),(0.582),(1))
	ModelValue_2 (5490000.0)
	ModelValue_4 (0.000385)
	ModelValue_3 (0.0209)
	C_g 0
	C_b 0
end parameters
begin molecule types
	Ra()
	Rd()
	#^ bmbiol:isInstanceOf ncit:C15632, ncit:C40715
	#^ bqbiol:isVersionOf ncit:C15632
	Sti_g(_1~1~0,Sti_g2~Sti_g2~0,Sti_g3~Sti_g3~0,Sti_g4~Sti_g4~0)
	#^ bmbiol:isInstanceOf ncit:C15632, ncit:C40715
	#^ bqbiol:isVersionOf ncit:C15632
	Sti_b(_1~1~0,Sti_b2~Sti_b2~0,Sti_b3~Sti_b3~0,Sti_b4~Sti_b4~0)
end molecule types
begin seed species
	Ra()() (307000.0) #Ra
	Rd()() (1940.0) #Rd
end seed species
begin observables
	Species Ra Ra() #Ra
	Species Rd Rd() #Rd
	Species Sti_g Sti_g(_1~0,Sti_g2~0,Sti_g3~0,Sti_g4~0) #Sti_g
	Species Sti_b Sti_b(_1~0,Sti_b2~0,Sti_b3~0,Sti_b4~0) #Sti_b
	Species Sti_g1 Sti_g(_1~1,Sti_g2~0,Sti_g3~0,Sti_g4~0) #Sti_g1
	Species Sti_g2 Sti_g(_1~1,Sti_g2~Sti_g2,Sti_g3~0,Sti_g4~0) #Sti_g2
	Species Sti_g3 Sti_g(_1~1,Sti_g2~0,Sti_g3~Sti_g3,Sti_g4~0) #Sti_g3
	Species Sti_g4 Sti_g(_1~1,Sti_g2~0,Sti_g3~0,Sti_g4~Sti_g4) #Sti_g4
	Species Sti_b1 Sti_b(_1~1,Sti_b2~0,Sti_b3~0,Sti_b4~0) #Sti_b1
	Species Sti_b2 Sti_b(_1~1,Sti_b2~Sti_b2,Sti_b3~0,Sti_b4~0) #Sti_b2
	Species Sti_b3 Sti_b(_1~1,Sti_b2~0,Sti_b3~Sti_b3,Sti_b4~0) #Sti_b3
	Species Sti_b4 Sti_b(_1~1,Sti_b2~0,Sti_b3~0,Sti_b4~Sti_b4) #Sti_b4
end observables
begin functions
	Inh_b_ar() = C_b^Hi_b*Imax_b/(C_b^Hi_b + (IC50_b*Psi_i)^Hi_b)
	Inh_g_ar() = C_g^Hi_g*Imax_g/(C_g^Hi_g + (IC50_g*Psi_i)^Hi_g)
	arRateRa() = ModelValue_3*Ra*(1 - Inh_b_ar)*(1 - Inh_g_ar)*(1 - Ra/ModelValue_2) - ModelValue_4*Ra*(Sti_b4 + 1)*(Sti_g4 + 1)
	arRateRd() = ModelValue_4*Ra*(Sti_b4 + 1)*(Sti_g4 + 1) - ModelValue_4*Rd
	Sti_b_ar() = C_b^Hs_b*Smax_b/(C_b^Hs_b + (Psi_s*SC50_b)^Hs_b)
	Sti_g_ar() = C_g^Hs_g*Smax_g/(C_g^Hs_g + (Psi_s*SC50_g)^Hs_g)
end functions
begin reaction rules
	g_death_stimulus_delay_1: Sti_g(_1~0,Sti_g2~0,Sti_g3~0,Sti_g4~0) -> Sti_g(_1~1,Sti_g2~0,Sti_g3~0,Sti_g4~0) ktau_g
	g_death_stimulus_delay_2: Sti_g(_1~1,Sti_g2~0,Sti_g3~0,Sti_g4~0) -> Sti_g(_1~1,Sti_g2~Sti_g2,Sti_g3~0,Sti_g4~0) ktau_g
	g_death_stimulus_delay_3: Sti_g(_1~1,Sti_g2~Sti_g2,Sti_g3~0,Sti_g4~0) -> Sti_g(_1~1,Sti_g2~0,Sti_g3~Sti_g3,Sti_g4~0) ktau_g
	g_death_stimulus_delay_4: Sti_g(_1~1,Sti_g2~0,Sti_g3~Sti_g3,Sti_g4~0) -> Sti_g(_1~1,Sti_g2~0,Sti_g3~0,Sti_g4~Sti_g4) ktau_g
	g_death_stimulus_delay_4_degradation: Sti_g(_1~1,Sti_g2~0,Sti_g3~0,Sti_g4~Sti_g4) -> 0  ktau_g
	b_death_stimulus_delay_1: Sti_b(_1~0,Sti_b2~0,Sti_b3~0,Sti_b4~0) -> Sti_b(_1~1,Sti_b2~0,Sti_b3~0,Sti_b4~0) ktau_b
	b_death_stimulus_delay_2: Sti_b(_1~1,Sti_b2~0,Sti_b3~0,Sti_b4~0) -> Sti_b(_1~1,Sti_b2~Sti_b2,Sti_b3~0,Sti_b4~0) ktau_b
	b_death_stimulus_delay_3: Sti_b(_1~1,Sti_b2~Sti_b2,Sti_b3~0,Sti_b4~0) -> Sti_b(_1~1,Sti_b2~0,Sti_b3~Sti_b3,Sti_b4~0) ktau_b
	b_death_stimulus_delay_4: Sti_b(_1~1,Sti_b2~0,Sti_b3~Sti_b3,Sti_b4~0) -> Sti_b(_1~1,Sti_b2~0,Sti_b3~0,Sti_b4~Sti_b4) ktau_b
	b_death_stimulus_delay_4_degradation: Sti_b(_1~1,Sti_b2~0,Sti_b3~0,Sti_b4~Sti_b4) -> 0  ktau_b
	0  -> Ra() arRateRa #rateLaw
	0  -> Rd() arRateRd #rateLaw
end reaction rules
end model
