###
#@BQB_IS:['http://identifiers.org/biomodels.db/MODEL1006230004']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0000075']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/4932']
#@BQB_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/10098216', 'http://identifiers.org/pubmed/9552349', 'http://identifiers.org/pubmed/10637314']
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1006230004', 'http://identifiers.org/biomodels.db/BIOMD0000000675']
#@creatorEmail:'mroberts@ebi.ac.uk'
#@creatorName:'Roberts Matthew Grant'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 21 molecules and 0 reactions. The translated model has 12 molecules and 13 rules'
###
begin model
begin parameters
	ks_n2_ 0.05
	kd_n2 0.1
	ks_b2 0.002
	ks_b2_ 0.05
	kd_b2 0.01
	kd_b2_ 2.0
	kd_b2__ 0.05
	ks_b5 0.006
	ks_b5_ 0.02
	kd_b5 0.1
	kd_b5_ 0.25
	Jn3 6.0
	Dn3 1.0
	ks_c1 0.02
	ks_c1_ 0.1
	kas_b2 50.0
	kdi_b2 0.05
	kas_b5 50.0
	kdi_b5 0.05
	kd2_c1 0.3
	epsilonc1_n3 20.0
	epsilonc1_k2 2.0
	epsilonc1_b5 1.0
	epsilonc1_b2 0.067
	ks_20 0.005
	ks_20_ 0.06
	ka_20 1.0
	ki_20 0.1
	ki_20_ 10.0
	ka_t1 0.04
	ka_t1_ 2.0
	ki_t1_ 0.64
	Ji_t1 0.05
	Ja_t1 0.05
	epsiloni_t1_n2 1.0
	epsiloni_t1_b5 0.5
	epsiloni_t1_b2 1.0
	mu 0.005776
	ks_ori 2.0
	kd_ori 0.06
	epsilonori_b2 0.4
	ks_bud 0.3
	kd_bud 0.06
	epsilonbud_b5 1.0
	ks_spn 0.08
	kd_spn 0.06
	J_spn 0.2
	ka_sbf 1.0
	ki_sbf 0.5
	ki_sbf_ 6.0
	Ji_sbf 0.01
	Ja_sbf 0.01
	epsilonsbf_n3 75.0
	epsilonsbf_b5 0.5
	ka_mcm 1.0
	ki_mcm 0.15
	Ji_mcm 1.0
	Ja_mcm 1.0
	ka_swi 1.0
	ki_swi 0.3
	ki_swi_ 0.2
	Ji_swi 0.1
	Ja_swi 0.1
	kd1_c1 0.01
	kd_20 0.08
	Jd2_c1 0.05
	END_M 2000.0
	START_S 1000.0
	ks_n2 0
	ki_t1 0
	SBF 0 #original 0.00273862251486172mol/L
	Clb2 9.346144e+22 #original 0.1552mol/L
	Hct1_T 6.022e+23 #original 1.0mol/L
	Mcm1 0 #original 0.512775724968637mol/L
	Sic1 1.409148e+22 #original 0.0234mol/L
	Swi5 1.0 #original 0.922650759727986mol/L
	Clb5 2.450954e+22 #original 0.0407mol/L
	Cln3 1.19485275042037e+21 #original 0.0019841460485227mol/L
	MBF 0 #original 0.00273862251486172mol/L
	Bck2 1.074421152e+21 #original 0.00178416mol/L
	Bck2_0 1.6259400000000001e+21 #original 0.0027mol/L
	Cln3_max 1.2044e+22 #original 0.02mol/L
end parameters
begin molecule types
	Cln2()
	Clb2_T()
	#^ bqbiol:hasPart uniprot:P30283, uniprot:P38634
	Clb5_Sic1(Clb2_Sic1~Clb2_Sic1~0)
	Hct1()
	Sic1_T()
	Cdc20_T()
	Cdc20()
	Clb5_T()
	mass
	ORI
	BUD
	SPN
end molecule types
begin seed species
	Cln2() 4.69716e+21 # 0.0078mol/L * 6.022e23/mol *1.0L #Cln2 #Cln2
	Cdc20() 4.1238656e+23 #original 0.6848mol/L #Cdc20 #Cdc20
	Cdc20_T() 5.017530400000001e+23 #original 0.8332mol/L #Cdc20_T #Cdc20_T
	Hct1() 5.9894812000000005e+23 #original 0.9946mol/L #Hct1 #Hct1
	Clb5_Sic1(Clb2_Sic1~Clb2_Sic1) 4.75738e+22 #original 0.079mol/L #Clb2_Sic1 #Clb2_Sic1
	Sic1_T() 7.413082e+22 #original 0.1231mol/L #Sic1_T #Sic1_T
	Clb5_Sic1(Clb2_Sic1~0) 1.246554e+22 #original 0.0207mol/L #Clb5_Sic1 #Clb5_Sic1
	Clb5_T() 3.697508e+22 #original 0.0614mol/L #Clb5_T #Clb5_T
	Clb2_T() 1.4103524e+23 #original 0.2342mol/L #Clb2_T #Clb2_T
	mass 0.6608
	ORI 0
	BUD 0
	SPN 0
end seed species
begin observables
	Species Cln2 Cln2() #Cln2
	Species Cdc20 Cdc20() #Cdc20
	Species Cdc20_T Cdc20_T() #Cdc20_T
	Species Hct1 Hct1() #Hct1
	Species Clb2_Sic1 Clb5_Sic1(Clb2_Sic1~Clb2_Sic1) #Clb2_Sic1
	Species Sic1_T Sic1_T() #Sic1_T
	Species Clb5_Sic1 Clb5_Sic1(Clb2_Sic1~0) #Clb5_Sic1
	Species Clb5_T Clb5_T() #Clb5_T
	Species Clb2_T Clb2_T() #Clb2_T
	Species mass mass
	Species ORI ORI
	Species BUD BUD
	Species SPN SPN
end observables
begin functions
	Clb5_ar() = -Clb5_Sic1 + Clb5_T
	Clb2_ar() = -Clb2_Sic1 + Clb2_T
	Cln3_ar() = Cln3_max*Dn3*mass/(Dn3*mass + Jn3)
	Bck2_ar() = Bck2_0*mass
	Vd2_c1() = kd2_c1*(Bck2_ar*epsilonc1_k2 + Clb2_ar*epsilonc1_b2 + Clb5_ar*epsilonc1_b5 + Cln2 + Cln3_ar*epsilonc1_n3)
	Sic1_ar() = -Clb2_Sic1 - Clb5_Sic1 + Sic1_T
	Vd_b5() = Cdc20*kd_b5_ + kd_b5
	arRateClb5_Sic1() = -Clb5_Sic1*(Vd2_c1/(Jd2_c1 + Sic1_T) + Vd_b5 + kd1_c1 + kdi_b5) + Clb5_ar*Sic1_ar*kas_b5
	Vd_b2() = Cdc20*kd_b2__ + Hct1*kd_b2_ + kd_b2*(-Hct1 + Hct1_T)
	arRateClb2_Sic1() = -Clb2_Sic1*(Vd2_c1/(Jd2_c1 + Sic1_T) + Vd_b2 + kd1_c1 + kdi_b2) + Clb2_ar*Sic1_ar*kas_b2
	Va_sbf() = ka_sbf*(Clb5_ar*epsilonsbf_b5 + Cln2 + epsilonsbf_n3*(Bck2_ar + Cln3_ar))
	Vi_t1() = ki_t1 + ki_t1_*(Clb2_ar*epsiloni_t1_b2 + Clb5_ar*epsiloni_t1_b5 + Cln2*epsiloni_t1_n2 + Cln3_ar)
	arRateBUD() = -BUD*kd_bud + ks_bud*(Clb5_ar*epsilonbud_b5 + Cln2 + Cln3_ar)
	arRateORI() = -ORI*kd_ori + ks_ori*(Clb2_ar*epsilonori_b2 + Clb5_ar)
	Mcm1_ar() = 2*Clb2_ar*Ji_mcm*ka_mcm/(Clb2_ar*Ji_mcm*ka_mcm - Clb2_ar*ka_mcm + Ja_mcm*ki_mcm + ki_mcm + sqrt(-Clb2_ar*Ji_mcm*ka_mcm*(-4*Clb2_ar*ka_mcm + 4*ki_mcm) + (Clb2_ar*Ji_mcm*ka_mcm - Clb2_ar*ka_mcm + Ja_mcm*ki_mcm + ki_mcm)^2))
	arRateClb2_T() = -Clb2_T*Vd_b2 + mass*(Mcm1_ar*ks_b2_ + ks_b2)
	SBF_ar() = 2*Ji_sbf*Va_sbf/(Clb2_ar*ki_sbf_ + Ja_sbf*(Clb2_ar*ki_sbf_ + ki_sbf) + Ji_sbf*Va_sbf - Va_sbf + ki_sbf + sqrt(-4*Ji_sbf*Va_sbf*(Clb2_ar*ki_sbf_ - Va_sbf + ki_sbf) + (Clb2_ar*ki_sbf_ + Ja_sbf*(Clb2_ar*ki_sbf_ + ki_sbf) + Ji_sbf*Va_sbf - Va_sbf + ki_sbf)^2))
	MBF_ar() = SBF_ar
	arRateClb5_T() = -Clb5_T*Vd_b5 + mass*(MBF_ar*ks_b5_ + ks_b5)
	Swi5_ar() = 2*Cdc20*Ji_swi*ka_swi/(Cdc20*Ji_swi*ka_swi - Cdc20*ka_swi + Clb2_ar*ki_swi_ + Ja_swi*(Clb2_ar*ki_swi_ + ki_swi) + ki_swi + sqrt(-Cdc20*Ji_swi*ka_swi*(-4*Cdc20*ka_swi + 4*Clb2_ar*ki_swi_ + 4*ki_swi) + (Cdc20*Ji_swi*ka_swi - Cdc20*ka_swi + Clb2_ar*ki_swi_ + Ja_swi*(Clb2_ar*ki_swi_ + ki_swi) + ki_swi)^2))
	arRateSic1_T() = -Sic1_T*(Vd2_c1/(Jd2_c1 + Sic1_T) + kd1_c1) + Swi5_ar*ks_c1_ + ks_c1
	arRateSPN() = Clb2_ar*ks_spn/(Clb2_ar + J_spn) - SPN*kd_spn
	arRateHct1() = -Hct1*Vi_t1/(Hct1 + Ji_t1) + (-Hct1 + Hct1_T)*(Cdc20*ka_t1_ + ka_t1)/(-Hct1 + Hct1_T + Ja_t1)
	arRateCdc20_T() = -Cdc20_T*kd_20 + Clb2_ar*ks_20_ + ks_20
	Vi_20() =  if((time()>=START_S&&time()<END_M),(10),(if((time()>=END_M&&time()<END_M+12),(0.825*END_M-0.825*time()+10),(0.1))))
	arRateCdc20() = -Cdc20*(Vi_20 + kd_20) + ka_20*(-Cdc20 + Cdc20_T)
	arRateCln2() = -Cln2*kd_n2 + mass*(SBF_ar*ks_n2_ + ks_n2)
	arRatemass() = mass*mu
	D() = -32 + 1.026/mu
end functions
begin reaction rules
	0  -> Cln2() arRateCln2 #rateLaw
	0  -> Cdc20() arRateCdc20 #rateLaw
	0  -> Cdc20_T() arRateCdc20_T #rateLaw
	0  -> Hct1() arRateHct1 #rateLaw
	0  -> Clb5_Sic1(Clb2_Sic1~Clb2_Sic1) arRateClb2_Sic1 #rateLaw
	0  -> Sic1_T() arRateSic1_T #rateLaw
	0  -> Clb5_Sic1(Clb2_Sic1~0) arRateClb5_Sic1 #rateLaw
	0  -> Clb5_T() arRateClb5_T #rateLaw
	0  -> Clb2_T() arRateClb2_T #rateLaw
	0  -> mass() arRatemass #rateLaw
	0  -> ORI() arRateORI #rateLaw
	0  -> BUD() arRateBUD #rateLaw
	0  -> SPN() arRateSPN #rateLaw
end reaction rules
end model
