###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000692', 'http://identifiers.org/biomodels.db/MODEL4968912141']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/12667087']
#@BQB_HAS_PART:['http://identifiers.org/kegg.orthology/K08052']
#@BQB_IS_PART_OF:['http://identifiers.org/kegg.pathway/ko04014']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:1904475']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/562']
#@BQB_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/12667087']
#@creatorEmail:'mroberts@ebi.ac.uk'
#@creatorName:'Roberts Matthew Grant'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 8 molecules and 5 reactions. The translated model has 6 molecules and 5 rules'
###
begin model
begin parameters
	r1_kb 0.000000
	r1_kf 0.000000
	r2_kb 0.000000
	r2_kf 0.000000
	r3_kb 0.000000
	r3_kf 0.000000
	r4_kb 0.000000
	r4_kf 0.000000
	r5_kb 0.000000
	r5_kf 0.000000
end parameters
begin molecule types
	#^ bqbiol:isVersionOf kegg.orthology:K08052
	NF1(rasgdp,rasgtp)
	#^ bqbiol:hasPart kegg.orthology:K08052, kegg.compound:C00044
	#^ bqbiol:isVersionOf ncbigene:43873
	RasGTP_minus_NF1_star_()
	#^ bqbiol:hasPart kegg.compound:C00044
	#^ bqbiol:isVersionOf ncbigene:43873
	RasGTP(nf1)
	#^ bqbiol:hasPart kegg.compound:C00035, chebi:CHEBI:24838, kegg.orthology:K08052
	#^ bqbiol:isVersionOf ncbigene:43873
	RasGDP_minus_NF1_Pi()
	#^ bqbiol:hasPart kegg.compound:C00035
	#^ bqbiol:isVersionOf ncbigene:43873
	RasGDP(nf1)
	#^ bqbiol:isVersionOf chebi:CHEBI:24838
	Pi()
end molecule types
begin seed species
	Pi() 6.022e+17 # (1.0 * 1e-06)mol/L * 6.022e23/mol *1.0L #Pi #Pi
	RasGTP(nf1) 6.022e+17 #original 1.0substance/L #RasGTP #RasGTP
	NF1(rasgdp,rasgtp) 6.021616628469567e+18 #original 9.99936338171632substance/L #NF1 #NF1
end seed species
begin observables
	Species Pi Pi() #Pi
	Species RasGTP RasGTP(nf1) #RasGTP
	Species RasGTP_minus_NF1 NF1(rasgdp,rasgtp!788).RasGTP(nf1!788) #RasGTP_minus_NF1
	Species RasGTP_minus_NF1_star_ RasGTP_minus_NF1_star_() #RasGTP_minus_NF1_star_
	Species RasGDP_minus_NF1_Pi RasGDP_minus_NF1_Pi() #RasGDP_minus_NF1_Pi
	Species RasGDP_NF1 NF1(rasgdp!787,rasgtp).RasGDP(nf1!787) #RasGDP_NF1
	Species RasGDP RasGDP(nf1) #RasGDP
	Species NF1 NF1(rasgdp,rasgtp) #NF1
end observables
begin functions
	hplc_curve() = 100*RasGTP
	Pi_curve() = 100*Pi - 100
end functions
begin reaction rules
	GTP_hydrolysis_sbo_1_sbc_: RasGTP_minus_NF1_star_() <-> RasGDP_minus_NF1_Pi() r1_kf,r1_kb
	GTP_hydrolysis_sbo_2_sbc_: RasGDP_minus_NF1_Pi() <-> Pi() + NF1(rasgdp!787,rasgtp).RasGDP(nf1!787) r2_kf,r2_kb
	Ras_activation: NF1(rasgdp,rasgtp!788).RasGTP(nf1!788) <-> RasGTP_minus_NF1_star_() r3_kf,r3_kb
	GAP_dissociation: NF1(rasgdp!787,rasgtp).RasGDP(nf1!787) <-> RasGDP(nf1) + NF1(rasgdp,rasgtp) r4_kf,r4_kb
	NF1_binding: RasGTP(nf1) + NF1(rasgdp,rasgtp) <-> NF1(rasgdp,rasgtp!788).RasGTP(nf1!788) r5_kf,r5_kb
end reaction rules
end model
