###
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046', 'http://identifiers.org/go/GO:0046849']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/23717504']
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000721', 'http://identifiers.org/biomodels.db/MODEL1811150001']
#@creatorEmail:'sarubini.kananathan@hotmail.co.uk'
#@creatorName:'Kananathan Sarubini'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 5 molecules and 10 reactions. The translated model has 5 molecules and 12 rules'
###
begin model
begin parameters
	alpha_1 0.5
	alpha_2 0.1
	alpha_3 0.1
	beta_1 0.1
	delta 0.1
	beta_2 0.1
	alpha_4 0.1
	K_S 200.0
	k1 0.7
	k2 0.015445
	g_31 1.0
	g_21 2.0
	g_22 1.0
	g_32 1.0
	g_41 1.0
	g_42 1.0
	g_43 -1.0
	g_44 1.0
	f_12 1.0
	f_14 1.0
	f_23 1.0
	f_34 1.0
	epsilon 1.0
	beta_3 0.1
	rho 20.0
end parameters
begin molecule types
	#^ bqbiol:isVersionOf bto:BTO:0001593
	Pre_Osteoblasts__P__()
	#^ bqbiol:is bto:BTO:0000968
	Osteoclasts__C__()
	#^ bqbiol:is bto:BTO:0001593
	Osteoblasts__B__()
	Bonevolume__z__()
	#^ bqbiol:is bto:BTO:0002038
	Osteocytes__S__()
end molecule types
begin seed species
	Bonevolume__z__() 6.022000000000001e+22 #original 100.0substance/volume  #Bonevolume__z__ #Bone_volume__z
	Osteocytes__S__() (200.0) -(20.0) #Osteocytes__S
end seed species
begin observables
	Species Osteocytes__S__ Osteocytes__S__() #Osteocytes (S)
	Species Pre_Osteoblasts__P__ Pre_Osteoblasts__P__() #Pre-Osteoblasts (P)
	Species Osteoblasts__B__ Osteoblasts__B__() #Osteoblasts (B)
	Species Osteoclasts__C__ Osteoclasts__C__() #Osteoclasts (C)
	Species Bonevolume__z__ Bonevolume__z__() #Bone volume (z)
end observables
begin functions
	fRate0() = Osteoblasts__B__^g_31*alpha_1*(1 - Osteocytes__S__/K_S)
	fRate1() = Osteocytes__S__^g_21*alpha_2*g_22*(1 - Osteocytes__S__/K_S)
	fRate2() = Pre_Osteoblasts__P__^g_32*alpha_3*(1 - Osteocytes__S__/K_S)
	fRate3() = Osteoclasts__C__^f_14*Pre_Osteoblasts__P__^f_12*beta_1
	fRate5() = Osteoblasts__B__^f_23*beta_2
	fRate6() = Osteocytes__S__^g_41*Pre_Osteoblasts__P__^g_42*alpha_4*(1.0 - Osteocytes__S__/K_S)^g_44*(Osteoblasts__B__ + epsilon)^g_43
	fRate7() = Osteoclasts__C__^f_34*beta_3
	fRate8() = Osteoclasts__C__*k1
	fRate9() = Osteoblasts__B__*k2
end functions
begin reaction rules
	Differentiation_of_Osteoblast_to_Osteocytes_reactants_0: 0  -> Osteoblasts__B__() -1*(fRate0()) #Modifiers(Osteocytes__S)
	Differentiation_of_Osteoblast_to_Osteocytes_products_0: 0  -> Osteocytes__S__() fRate0() #Modifiers(Osteocytes__S)
	Differentiation_of_MSC_cells_to_Pre_Osteoblast_cells_products_0: 0  -> Pre_Osteoblasts__P__() fRate1() #Modifiers(Osteocytes__S)
	Proliferation_of_pre_osteoblasts_products_0: 0  -> Pre_Osteoblasts__P__() fRate2() #Modifiers(Osteocytes__S)
	Differentiation_of_Pre_Osteoblast_to_mature_osteoblast_reactants_0: 0  -> Pre_Osteoblasts__P__() -1*(fRate3()) #Modifiers(Osteoclasts__C)
	Differentiation_of_Pre_Osteoblast_to_mature_osteoblast_products_0: 0  -> Osteoblasts__B__() fRate3() #Modifiers(Osteoclasts__C)
	Apoptosis_of_pre_osteoblast: Pre_Osteoblasts__P__() -> 0  delta
	Apoptosis_of_osteoblasts_reactants_0: 0  -> Osteoblasts__B__() -1*(fRate5())
	Differentiation_of_pre_osteoclast_to_osteoclasts: 0  -> Osteoclasts__C__() fRate6() #Modifiers(Osteocytes__S, Pre_Osteoblasts__P, Osteoblasts__B)
	Apoptosis_of_osteoclasts_reactants_0: 0  -> Osteoclasts__C__() -1*(fRate7())
	Resorption_of_bone_reactants_0: 0  -> Bonevolume__z__() -1*(fRate8()) #Modifiers(Osteoclasts__C)
	Formation_of_bone: 0  -> Bonevolume__z__() fRate9() #Modifiers(Osteoblasts__B)
end reaction rules
end model
