###
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0007049', 'http://identifiers.org/ncit/C38794']
#@BQB_HAS_PROPERTY:['http://identifiers.org/reactome/R-HSA-1640170']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_IS_DESCRIBED_BY:['http://identifiers.org/doi/10.1371/journal.pone.0097130', 'http://identifiers.org/pubmed/24824602']
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1811220001', 'http://identifiers.org/biomodels.db/BIOMD0000000723']
#@creatorEmail:'ashleythomasxavier@gmail.com'
#@creatorName:'Xavier Ashley'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 25 molecules and 73 reactions. The translated model has 23 molecules and 91 rules'
###
begin model
begin parameters
	a1frac 0.081283
	FB 2.0
	FE 25.0
	J15 0.1
	J17 0.3
	J20 100.0
	Ja20 0.005
	Ja25 0.005
	JaAPC 0.01
	Jafb 0.01
	Jah1 0.15
	Jatf 0.01
	Jawee 0.05
	Jaweeb 0.05
	Ji20 0.005
	Ji25 0.031623
	JiAPC 0.001
	Jifb 0.001
	Jih1 0.01
	Jitf 0.01
	Jiwee 0.05
	k10 88.175
	k15 5.2905
	k16 44.0875
	k17 2645.25
	k17p 2.64525
	k18 176.35
	K19 35.27
	K19a 440.875
	K20 176.35
	K21 1.0
	K22 3.527
	K23a 0.17635
	K23b 1.7635
	k24 1763.5
	k25p 61.474
	k25pp 30515.96
	K26 17635.0
	K26R 35.27
	k9 45.851
	ka20 292.669
	ka25 8.85277
	kaAPC 2.33401
	kacdh1 264.525
	kafab 0.296268
	kah1p 155.8708
	kah1pp 176350.0
	kasa 19733.57
	kase 19733.57
	katfpp 58.70692
	katfppp 97.80724
	katfpppp 77.63935
	kaweep 13.8188
	kd20 17.635
	kdap 0.516094
	kdapp 2645.25
	kdbp 0.853181
	kdbpp 176.35
	kdbppp 387.97
	kde2fcdc20 881.75
	kde2fcdh1 1.7635
	kdep 1.961012
	kdepp 1.973357
	kdeppp 176.35
	kdepppp 3527.0
	kdia 196.0783
	kdie 196.0783
	kdip 196.0783
	kdipp 978.0688
	kdippp 1960.837
	kdipppp 978.0688
	ke2f 4.2324
	ki20 17.635
	ki25 35.27
	kiAPC 3.862259
	kifb 9.827456
	kih1pp 17635.0
	kih1ppp 1763.5
	kitfp 48.96181
	kitfpp 19.60836
	kitfppp 19.60836
	kiwee 0.145
	ks20pp 105.81
	ksap 16.75325
	ksapp 0.10581
	ksappp 20.28025
	ksbp 6.7013
	ksbpp 15.8715
	ksbppp 1.7635
	ksbpppp 0.617225
	ksep 1.562461
	ksepp 8.8175
	ksip 390.9926
	kweep 234.8312
	kweepp 17635.0
	LA 30.0
	LB 0.5
	LD 3.3
	LE 10.0
	PP1T 1.0
	u 0.693937
	k24r 176.35
	kiweeb 5.0
	r38_k2 2.000000
	r43_k2 2.000000
	r44_k2 2.000000
	r49_k0 1.000000
end parameters
begin molecule types
	#^ bqbiol:isVersionOf uniprot.isoform:P20248
	TriA()
	#^ bqbiol:isVersionOf uniprot:Q8WWL7
	cycB()
	#^ bqbiol:isVersionOf uniprot:Q12834
	Cdc20T()
	#^ bqbiol:isVersionOf uniprot:P20248
	cycA()
	#^ bqbiol:isVersionOf uniprot:O96020, uniprot:P24864
	cycE()
	#^ bqbiol:isVersionOf uniprot:P11308
	DRG()
	#^ bqbiol:isVersionOf uniprot:P20248, uniprot:P24941
	actCycACdk2()
	#^ bqbiol:isVersionOf cco:CCO:42550, uniprot:P06400
	pE2FRB()
	#^ bqbiol:isVersionOf uniprot:Q8WWL7
	actCycB()
	#^ bqbiol:isVersionOf uniprot:P12830
	Cdh1()
	#^ bqbiol:isVersionOf uniprot:P30279
	TriD(actCycD~actCycD~0)
	#^ bqbiol:isVersionOf cco:CCO:42550, go:GO:0035189
	E2FRB()
	#^ bqbiol:hasVersion uniprot:P20248, uniprot:P06493, uniprot:P14635
	preMPF()
	#^ bqbiol:isVersionOf pr:PR:000026433, go:GO:0005680
	APCP()
	#^ bqbiol:isVersionOf uniprot:Q12834
	Cdc20A()
	#^ bqbiol:isVersionOf cco:CCO:42550
	E2F()
	#^ bqbiol:isVersionOf cco:CCO:42550
	pE2F()
	#^ bqbiol:isVersionOf uniprot:P46527
	CKI()
	#^ bqbiol:isVersionOf uniprot:P24864, uniprot:O96020
	actCycE()
	#^ bqbiol:isVersionOf uniprot:P06400
	Rb(phospho~PP~0)
	#^ bqbiol:isVersionOf ncit:C43246
	mass()
	#^ bqbiol:isVersionOf uniprot:P20248, uniprot:P06493
	actCycACdk1()
	#^ bqbiol:isVersionOf uniprot:P11308
	ERG()
end molecule types
begin seed species
	Rb(phospho~PP) 8.479042242000001e+21 # (14.08011 * 0.001)mol/L * 6.022e23/mol *1.0L #ppRB #ppRB
	E2F() 4.3120832100000006e+20 #original 0.716055substance/volume #E2F #E2F
	pE2F() 8.361769814e+20 #original 1.388537substance/volume #pE2F #pE2F
	Rb(phospho~0) 6.449562e+19 #original 0.1071substance/volume #Rb #Rb
	E2FRB() 1.6636979400000002e+20 #original 0.27627substance/volume #E2FRB #E2FRB
	pE2FRB() 3.23032124e+20 #original 0.53642substance/volume #pE2FRB #pE2FRB
	actCycACdk1() 2.289399222401815e+18 #original 0.003801725709734substance/volume #actCycACdk1 #actCycACdk1
	actCycACdk2() 2.58763476516188e+19 #original 0.042969690554substance/volume #actCycACdk2 #actCycACdk2
	actCycB() 6.022000000000001e+18 #original 0.01substance/volume #actCycB #actCycB
	actCycE() 2.76205052e+19 #original 0.045866substance/volume #actCycE #actCycE
	cycA() 4.0904435e+19 #original 0.067925substance/volume #cycA #cycA
	cycB() 1.42432344e+21 #original 2.3652substance/volume #cycB #cycB
	cycE() 4.36673286e+19 #original 0.072513substance/volume #cycE #cycE
	CKI() 3.62424627504e+20 #original 0.60183432substance/volume #CKI #CKI
	Cdh1() 6.006101920000001e+20 #original 0.99736substance/volume #Cdh1 #Cdh1
	preMPF() 1.41830493276e+21 #original 2.3552058substance/volume #preMPF #preMPF
	TriA() 1.2739179680000002e+19 #original 0.0211544substance/volume #TriA #TriA
	APCP() 4.88251716e+20 #original 0.81078substance/volume #APCP #APCP
	Cdc20A() 1.6421994000000002e+20 #original 0.2727substance/volume #Cdc20A #Cdc20A
	Cdc20T() 1.6449093e+20 #original 0.27315substance/volume #Cdc20T #Cdc20T
	mass() 6.022e+20 #original 1.0substance/volume #mass #mass
end seed species
begin observables
	Species ERG ERG() #ERG
	Species DRG DRG() #DRG
	Species ppRB Rb(phospho~PP) #ppRB
	Species E2F E2F() #E2F
	Species pE2F pE2F() #pE2F
	Species Rb Rb(phospho~0) #Rb
	Species E2FRB E2FRB() #E2FRB
	Species pE2FRB pE2FRB() #pE2FRB
	Species actCycD TriD(actCycD~actCycD) #actCycD
	Species TriD TriD(actCycD~0) #TriD
	Species actCycACdk1 actCycACdk1() #actCycACdk1
	Species actCycACdk2 actCycACdk2() #actCycACdk2
	Species actCycB actCycB() #actCycB
	Species actCycE actCycE() #actCycE
	Species cycA cycA() #cycA
	Species cycB cycB() #cycB
	Species cycE cycE() #cycE
	Species CKI CKI() #CKI
	Species Cdh1 Cdh1() #Cdh1
	Species preMPF preMPF() #preMPF
	Species TriA TriA() #TriA
	Species APCP APCP() #APCP
	Species Cdc20A Cdc20A() #Cdc20A
	Species Cdc20T Cdc20T() #Cdc20T
	Species mass mass() #mass
end observables
begin functions
	PP1A() = PP1T/(K21*(FB*actCycB + FE*(actCycACdk1 + actCycACdk2 + actCycE) + 1))
	v44() = ppRB*(K19*PP1A + K19a*(-PP1A + PP1T))
	TriE() = -actCycE + cycE
	freeCK1() = CKI - TriA - TriD - TriE
	Cdc25() = 2*Ji25*actCycB*ka25/(Ja25*ki25 + Ji25*actCycB*ka25 - actCycB*ka25 + ki25 + sqrt(-Ja25*actCycB*ka25*(-4*actCycB*ka25 + 4*ki25) + (Ja25*ki25 + Ji25*actCycB*ka25 - actCycB*ka25 + ki25)^2))
	V25() = Cdc25*k25pp + k25p
	Wee1() = 2*Jiwee*kaweep/(Jawee*(actCycB*kiweeb + kiwee*(actCycACdk1 + actCycACdk2)) + Jiwee*kaweep + actCycB*kiweeb - kaweep + kiwee*(actCycACdk1 + actCycACdk2) + sqrt(-Jawee*kaweep*(4*actCycB*kiweeb - 4*kaweep + 4*kiwee*(actCycACdk1 + actCycACdk2)) + (Jawee*(actCycB*kiweeb + kiwee*(actCycACdk1 + actCycACdk2)) + Jiwee*kaweep + actCycB*kiweeb - kaweep + kiwee*(actCycACdk1 + actCycACdk2))^2))
	Vwee() = Wee1*kweepp + kweep
	TFAB() = 2*Jifb*kafab*(actCycACdk1 + actCycACdk2)/(Jafb*kifb + Jifb*kafab*(actCycACdk1 + actCycACdk2) - kafab*(actCycACdk1 + actCycACdk2) + kifb + sqrt(-Jifb*kafab*(actCycACdk1 + actCycACdk2)*(-4*kafab*(actCycACdk1 + actCycACdk2) + 4*kifb) + (Jafb*kifb + Jifb*kafab*(actCycACdk1 + actCycACdk2) - kafab*(actCycACdk1 + actCycACdk2) + kifb)^2))
	Vsb() = E2F*ksbpppp + TFAB*ksbpp + actCycB*ksbppp + ksbp
	Cdk1PCycB() = -actCycB + cycB
	CdkCycBCK1() = -actCycB + cycB - preMPF
	Vdi() = actCycB*kdippp + actCycE*kdipppp + kdip + kdipp*(actCycACdk1 + actCycACdk2)
	Vdb() = Cdc20A*kdbppp + Cdh1*kdbpp + kdbp
	Vsi() = ksip
	Vda() = Cdc20A*kdapp + Cdh1*kacdh1 + kdap
	Vde() = actCycB*kdepppp + actCycE*kdepp + kdep + kdeppp*(actCycACdk1 + actCycACdk2)
	Vatf() = actCycD*katfpppp + actCycE*katfppp + katfpp*(actCycACdk1 + actCycACdk2)
	v52() = E2FRB*(K23a*(actCycACdk1 + actCycACdk2) + K23b*actCycB)
	v51() = K22*pE2FRB
	v50() = K26*Rb*pE2F
	v49() = K26R*pE2FRB
	v48() = E2F*K26*Rb
	v47() = K22*pE2F
	v46() = E2F*(K23a*(actCycACdk1 + actCycACdk2) + K23b*actCycB)
	v45() = E2FRB*K26R
	v43() = K20*Rb*(LA*(actCycACdk1 + actCycACdk2) + LB*actCycB + LD*(TriD + actCycD) + LE*actCycE)
	v30() = K20*pE2FRB*(LA*(actCycACdk1 + actCycACdk2) + LB*actCycB + LD*(TriD + actCycD) + LE*actCycE)
	v29() = E2FRB*K20*(LA*(actCycACdk1 + actCycACdk2) + LB*actCycB + LD*(TriD + actCycD) + LE*actCycE)
	fRate0() = J15^2*k15/(DRG^2 + 1.0*J15^2)
	fRate2() = ERG*k17p
	fRate3() = DRG^2*k17/(DRG^2 + J17^2)
	fRate5() = v29
	fRate6() = v30
	fRate7() = v43
	fRate8() = v44
	fRate9() = v45
	fRate10() = v47
	fRate11() = v46
	fRate12() = v48
	fRate13() = E2F*ke2f*mass
	fRate14() = Cdc20A*kde2fcdc20
	fRate15() = Cdh1*kde2fcdh1
	fRate16() = v49
	fRate17() = v50
	fRate18() = Cdc20A*kde2fcdc20
	fRate19() = Cdh1*kde2fcdh1
	fRate20() = v51
	fRate21() = v52
	fRate22() = DRG*k9
	fRate25() = freeCK1*k24
	fRate28() = 2.0*a1frac*mass*(E2F*ksapp + TFAB*ksappp + ksap)
	fRate29() = TriA*Vdi*a1frac
	fRate30() = TriA*a1frac*kdia
	fRate32() = freeCK1*kasa
	fRate33() = 2*mass*(1 - a1frac)*(E2F*ksapp + TFAB*ksappp + ksap)
	fRate34() = TriA*(1 - a1frac)*(Vdi + kdia)
	fRate36() = freeCK1*kasa
	fRate37() = 2.0*Vsb*mass
	fRate38() = V25*cycB
	fRate42() = 2.0*ksep*mass
	fRate43() = 2.0*E2F*ksepp*mass
	fRate44() = TriE*Vdi
	fRate45() = TriE*kdie
	fRate47() = freeCK1*kase
	fRate48() = 2.0*mass*(E2F*ksapp + TFAB*ksappp + ksap)
	fRate54() = (1 - Cdh1)*(Cdc20A*kah1pp + kah1p)/(-Cdh1 + Jah1 + 1)
	fRate55() = Cdh1*(actCycB*kih1ppp + kih1pp*(actCycACdk1 + actCycACdk2))/(Cdh1 + Jih1)
	fRate56() = Vwee*cycB
	fRate60() = cycA*freeCK1*kasa
	fRate61() = freeCK1*kasa
	fRate65() = actCycB*kaAPC/(-APCP + JaAPC + 1.0)
	fRate65m() = actCycB*kaAPC/(-APCP + JaAPC + 1.0)
	fRate66() = kiAPC/(APCP + JiAPC)
	fRate67() = APCP*Cdc20T*ka20/(-Cdc20A + Cdc20T + Ja20)
	fRate67m() = APCP*ka20/(-Cdc20A + Cdc20T + Ja20)
	fRate68() = ki20/(Cdc20A + Ji20)
	fRate70() = actCycB*ka20/(J20 + actCycB)
	fRate72() = mass*u
end functions
begin reaction rules
	reaction: 0  -> ERG() fRate0() #Modifiers(DRG)
	reaction_1: ERG() -> 0  k16
	reaction_2: 0  -> DRG() fRate2() #Modifiers(ERG)
	reaction_3: 0  -> DRG() fRate3()
	reaction_4: DRG() -> 0  k18
	reaction_5_reactants_0: 0  -> E2FRB() -1*(fRate5())
	reaction_5_products_0: 0  -> Rb(phospho~PP) fRate5()
	reaction_5_products_1: 0  -> E2F() fRate5()
	reaction_6_reactants_0: 0  -> pE2FRB() -1*(fRate6())
	reaction_6_products_0: 0  -> Rb(phospho~PP) fRate6()
	reaction_6_products_1: 0  -> pE2F() fRate6()
	reaction_7_reactants_0: 0  -> Rb(phospho~0) -1*(fRate7())
	reaction_7_products_0: 0  -> Rb(phospho~PP) fRate7()
	reaction_8_reactants_0: 0  -> Rb(phospho~PP) -1*(fRate8())
	reaction_8_products_0: 0  -> Rb(phospho~0) fRate8()
	reaction_9_reactants_0: 0  -> E2FRB() -1*(fRate9())
	reaction_9_products_0: 0  -> E2F() fRate9()
	reaction_9_products_1: 0  -> Rb(phospho~0) fRate9()
	reaction_10_reactants_0: 0  -> pE2F() -1*(fRate10())
	reaction_10_products_0: 0  -> E2F() fRate10()
	reaction_11_reactants_0: 0  -> E2F() -1*(fRate11())
	reaction_11_products_0: 0  -> pE2F() fRate11()
	reaction_12_reactants_0: 0  -> E2F() -1*(fRate12())
	reaction_12_reactants_1: 0  -> Rb(phospho~0) -1*(fRate12())
	reaction_12_products_0: 0  -> E2FRB() fRate12()
	reaction_13: 0  -> E2F() fRate13() #Modifiers(mass, E2F)
	reaction_14: E2F() -> 0  fRate14() #Modifiers(E2F, Cdc20A)
	reaction_15: E2F() -> 0  fRate15() #Modifiers(Cdh1, E2F)
	reaction_16_reactants_0: 0  -> pE2FRB() -1*(fRate16())
	reaction_16_products_0: 0  -> pE2F() fRate16()
	reaction_16_products_1: 0  -> Rb(phospho~0) fRate16()
	reaction_17_reactants_0: 0  -> pE2F() -1*(fRate17())
	reaction_17_reactants_1: 0  -> Rb(phospho~0) -1*(fRate17())
	reaction_17_products_0: 0  -> pE2FRB() fRate17()
	reaction_18: pE2F() -> 0  fRate18() #Modifiers(pE2F, Cdc20A)
	reaction_19: pE2F() -> 0  fRate19() #Modifiers(pE2F, Cdh1)
	reaction_20_reactants_0: 0  -> pE2FRB() -1*(fRate20())
	reaction_20_products_0: 0  -> E2FRB() fRate20()
	reaction_21_reactants_0: 0  -> E2FRB() -1*(fRate21())
	reaction_21_products_0: 0  -> pE2FRB() fRate21()
	reaction_22: 0  -> TriD(actCycD~actCycD) fRate22() #Modifiers(DRG)
	reaction_23: TriD(actCycD~0) -> TriD(actCycD~actCycD) Vdi #Modifiers(TriD)
	reaction_24: TriD(actCycD~0) -> TriD(actCycD~actCycD) k24r #Modifiers(TriD)
	reaction_25: TriD(actCycD~actCycD) -> TriD(actCycD~0) fRate25() #Modifiers(actCycD)
	reaction_26: TriD(actCycD~actCycD) -> 0  k10
	reaction_27: TriD(actCycD~0) -> 0  k10
	reaction_28: 0  -> actCycACdk1() fRate28() #Modifiers(E2F, mass)
	reaction_29: 0  -> actCycACdk1() fRate29() #Modifiers(TriA)
	reaction_30: 0  -> actCycACdk1() fRate30() #Modifiers(TriA)
	reaction_31: actCycACdk1() -> 0  Vda
	reaction_32: actCycACdk1() -> 0  fRate32() #Modifiers(actCycACdk1)
	reaction_33_products_0: 0  -> actCycACdk2() fRate33() #Modifiers(E2F, mass)
	reaction_34_products_0: 0  -> actCycACdk2() fRate34() #Modifiers(TriA)
	reaction_35: actCycACdk2() -> 0  Vda
	reaction_36: actCycACdk2() -> 0  fRate36() #Modifiers(actCycACdk2)
	reaction_37: 0  -> actCycB() + cycB() fRate37() #Modifiers(mass)
	reaction_38: 0  -> actCycB() fRate38() #Modifiers(cycB)
	reaction_39: actCycB() -> 0  V25
	reaction_40: actCycB() -> 0  Vdb
	reaction_41: actCycB() -> 0  Vwee
	reaction_42: 0  -> actCycE() + cycE() fRate42() #Modifiers(mass)
	reaction_43: 0  -> actCycE() + cycE() fRate43() #Modifiers(E2F, mass)
	reaction_44: 0  -> actCycE() fRate44()
	reaction_45: 0  -> actCycE() fRate45()
	reaction_46: actCycE() -> 0  Vde
	reaction_47: actCycE() -> 0  fRate47() #Modifiers(actCycE)
	reaction_48: 0  -> cycA() fRate48() #Modifiers(E2F, mass)
	reaction_49: cycA() -> 0  Vda
	reaction_50: cycB() -> 0  Vdb
	reaction_51: cycE() -> 0  Vde
	reaction_52: 0  -> CKI() Vsi
	reaction_53: CKI() -> 0  Vdi
	reaction_54_products_0: 0  -> Cdh1() fRate54() #Modifiers(Cdc20A)
	reaction_55_reactants_0: 0  -> Cdh1() -1*(fRate55()) #Modifiers(actCycACdk1, actCycACdk2, actCycB)
	reaction_56: 0  -> preMPF() fRate56() #Modifiers(cycB)
	reaction_57: preMPF() -> 0  Vwee
	reaction_58: preMPF() -> 0  V25
	reaction_59: preMPF() -> 0  Vdb
	reaction_60: 0  -> TriA() fRate60() #Modifiers(cycA)
	reaction_61: TriA() -> 0  fRate61() #Modifiers(TriA)
	reaction_62: TriA() -> 0  kdia
	reaction_63: TriA() -> 0  Vda
	reaction_64: TriA() -> 0  Vdi
	reaction_65: 0  <-> APCP() fRate65(),fRate65m() #Modifiers(actCycB)
	reaction_66: APCP() -> 0  fRate66()
	reaction_67: 0  <-> Cdc20A() fRate67(),fRate67m() #Modifiers(APCP, Cdc20T)
	reaction_68: Cdc20A() -> 0  fRate68()
	reaction_69: Cdc20A() -> 0  kd20
	reaction_70: 0  -> Cdc20T() fRate70() #Modifiers(actCycB)
	reaction_71: Cdc20T() -> 0  kd20
	reaction_72: 0  -> mass() fRate72() #Modifiers(mass)
end reaction rules
end model
