###
#@BQB_IS:['http://identifiers.org/go/GO:0055072']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/10090']
#@BQB_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/28521769']
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000735', 'http://identifiers.org/biomodels.db/MODEL1605030002']
#@creatorEmail:'jparmar@uchc.edu'
#@creatorName:'Parmar Jigneshkumar'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 23 molecules and 47 reactions. The translated model has 11 molecules and 47 rules'
###
begin model
begin parameters
	Injected 3073000000000000.0
	kNTBI_Fe1Tf 1084322005.0
	kInDuo 0.0689984226081531
	kInLiver 2.97790545667672
	kInRBC 1.08447580176706
	kInRest 6.16356235352873
	Km 0.0159421218669513
	Ki 1e-09
	kFe1Tf_Fe2Tf 1084322005.0
	VDuoNTBI 0.200241893786814
	VLiverNTBI 0.0261147638001175
	VSpleenNTBI 1.342204923
	VRestNTBI 0.0109451335200198
	kDuoLoss 0.0270113302698216
	vRBCSpleen 0.0235286
	kRestLoss 0.023533240736163
	kInBM 15.7690636138556
	kBMSpleen 0.061902954378781
	vDiet 0.00377422331938439
	Avogadro 6.02214179e+23 #units:unit_0
	ModelValue_39 (6.02214179e+23)
	r19_v 0.000000
	r20_k1 0.756160
end parameters
begin compartments
	#volume units: L
	Duodenum 3 3.84615e-05
	RBC 3 0.00079
	Spleen 3 6.73077e-05
	Liver 3 0.001161905
	Plasma 3 0.0013
	RestOfBody 3 0.019694766
	BoneMarrow 3 0.000214286
end compartments
begin molecule types
	#^ bqbiol:hasPart uniprot:Q921I1, chebi:CHEBI:29034
	Fe2Tf()
	#^ bqbiol:is uniprot:Q9EQ21
	Hepcidin()
	#^ bqbiol:isVersionOf chebi:CHEBI:24875
	NTBIm(FeDuom~FeDuom~0,FeLiverm~FeLiverm~0,FeOutsidem~FeOutsidem~0,FeRestm~FeRestm~0)
	#^ bqbiol:is uniprot:Q921I1
	Tf()
	#^ bqbiol:hasPart chebi:CHEBI:29034, uniprot:Q921I1
	Fe2Tfmm()
	#^ bqbiol:hasPart chebi:CHEBI:29034, uniprot:Q921I1
	Fe2Tfm()
	#^ bqbiol:hasPart chebi:CHEBI:29034, uniprot:Q921I1
	Fe1Tf()
	#^ bqbiol:isVersionOf chebi:CHEBI:24875
	NTBI(FeDuo~FeDuo~0,FeLiver~FeLiver~0,FeOutside~FeOutside~0,FeRest~FeRest~0)
	#^ bqbiol:isVersionOf chebi:CHEBI:24875
	FeBMm(FeRBCm~FeRBCm~0,FeSpleenm~FeSpleenm~0)
	#^ bqbiol:isVersionOf chebi:CHEBI:24875
	FeBM(FeRBC~FeRBC~0,FeSpleen~FeSpleen~0)
	#^ bqbiol:hasPart uniprot:Q921I1, chebi:CHEBI:29034
	Fe1Tfm()
end molecule types
begin seed species
	@Duodenum:NTBI(FeDuo~FeDuo,FeLiver~0,FeOutside~0,FeRest~0)@Duodenum 2.723575756226993e+17 # 0.0117590568706314mol/L * 6.022e23/mol *3.84615e-05L #FeDuo #FeDuo_0
	@RBC:FeBM(FeRBC~FeRBC,FeSpleen~0)@RBC 1.8068523891356877e+19 #original 0.0379799887571665mol/L #FeRBC #FeRBC_0
	@Spleen:FeBM(FeRBC~0,FeSpleen~FeSpleen)@Spleen 1.5979610041315245e+17 #original 0.00394239990123767mol/L #FeSpleen #FeSpleen_0
	@Liver:NTBI(FeDuo~0,FeLiver~FeLiver,FeOutside~0,FeRest~0)@Liver 1.3994752174531912e+18 #original 0.00200010981212238mol/L #FeLiver #FeLiver_0
	@Plasma:Tf()@Plasma 1.238628024791008e+16 #original 1.5821833083706e-05mol/L #Tf #Tf
	@Plasma:Hepcidin()@Plasma 18007146609183.246 #original 2.30017456622937e-08mol/L #Hepcidin #Hepcidin
	@Plasma:Fe2Tf()@Plasma 1.0588040331322258e+16 #original 1.35248196757048e-05mol/L #Fe2Tf #Fe2Tf_0
	@Plasma:Fe1Tf()@Plasma 7322361420767623.0 #original 9.35334724058915e-06mol/L #Fe1Tf #Fe1Tf_0
	@Plasma:NTBI(FeDuo~0,FeLiver~0,FeOutside~0,FeRest~0)@Plasma 26078014224754.375 #original 3.3311210465159e-08mol/L #NTBI #NTBI_0
	@RestOfBody:NTBI(FeDuo~0,FeLiver~0,FeOutside~0,FeRest~FeRest)@RestOfBody 3.4019959948771354e+18 #original 0.000286841656341217mol/L #FeRest #FeRest_0
	@BoneMarrow:FeBM(FeRBC~0,FeSpleen~0)@BoneMarrow 3.920115788083701e+17 #original 0.00303783614844319mol/L #FeBM #FeBM
end seed species
begin observables
	Species FeDuom_Duodenum @Duodenum:NTBIm(FeDuom~FeDuom,FeLiverm~0,FeOutsidem~0,FeRestm~0)@Duodenum #FeDuo*
	Species FeDuo_Duodenum @Duodenum:NTBI(FeDuo~FeDuo,FeLiver~0,FeOutside~0,FeRest~0)@Duodenum #FeDuo
	Species FeRBCm_RBC @RBC:FeBMm(FeRBCm~FeRBCm,FeSpleenm~0)@RBC #FeRBC*
	Species FeRBC_RBC @RBC:FeBM(FeRBC~FeRBC,FeSpleen~0)@RBC #FeRBC
	Species FeSpleenm_Spleen @Spleen:FeBMm(FeRBCm~0,FeSpleenm~FeSpleenm)@Spleen #FeSpleen*
	Species FeSpleen_Spleen @Spleen:FeBM(FeRBC~0,FeSpleen~FeSpleen)@Spleen #FeSpleen
	Species FeLiverm_Liver @Liver:NTBIm(FeDuom~0,FeLiverm~FeLiverm,FeOutsidem~0,FeRestm~0)@Liver #FeLiver*
	Species FeLiver_Liver @Liver:NTBI(FeDuo~0,FeLiver~FeLiver,FeOutside~0,FeRest~0)@Liver #FeLiver
	Species Fe2Tfm_Plasma @Plasma:Fe2Tfm()@Plasma #Fe2Tf*
	Species NTBIm_Plasma @Plasma:NTBIm(FeDuom~0,FeLiverm~0,FeOutsidem~0,FeRestm~0)@Plasma #NTBI*
	Species Tf_Plasma @Plasma:Tf()@Plasma #Tf
	Species Fe1Tfm_Plasma @Plasma:Fe1Tfm()@Plasma #Fe1Tf*
	Species Hepcidin_Plasma @Plasma:Hepcidin()@Plasma #Hepcidin
	Species Fe2Tf_Plasma @Plasma:Fe2Tf()@Plasma #Fe2Tf
	Species Fe1Tf_Plasma @Plasma:Fe1Tf()@Plasma #Fe1Tf
	Species NTBI_Plasma @Plasma:NTBI(FeDuo~0,FeLiver~0,FeOutside~0,FeRest~0)@Plasma #NTBI
	Species Fe2Tfmm_Plasma @Plasma:Fe2Tfmm()@Plasma #Fe2Tf**
	Species FeRestm_RestOfBody @RestOfBody:NTBIm(FeDuom~0,FeLiverm~0,FeOutsidem~0,FeRestm~FeRestm)@RestOfBody #FeRest*
	Species FeOutsidem_RestOfBody @RestOfBody:NTBIm(FeDuom~0,FeLiverm~0,FeOutsidem~FeOutsidem,FeRestm~0)@RestOfBody #FeOutside*
	Species FeRest_RestOfBody @RestOfBody:NTBI(FeDuo~0,FeLiver~0,FeOutside~0,FeRest~FeRest)@RestOfBody #FeRest
	Species FeOutside_RestOfBody @RestOfBody:NTBI(FeDuo~0,FeLiver~0,FeOutside~FeOutside,FeRest~0)@RestOfBody #FeOutside
	Species FeBM_BoneMarrow @BoneMarrow:FeBM(FeRBC~0,FeSpleen~0)@BoneMarrow #FeBM
	Species FeBMm_BoneMarrow @BoneMarrow:FeBMm(FeRBCm~0,FeSpleenm~0)@BoneMarrow #FeBM*
end observables
begin functions
	FePlasma_0() = 0.0013*Avogadro*Fe1Tfm_Plasma + 0.0039*Avogadro*Fe2Tfm_Plasma + 0.0013*Avogadro*NTBIm_Plasma
	FePlasma_conc() = 769.230769230769*FePlasma_0/ModelValue_39
	Total_Tf() = 0.0026*Avogadro*Fe1Tfm_Plasma + 0.0026*Avogadro*Fe2Tfm_Plasma + 0.0013*Avogadro*Fe2Tfmm_Plasma + 0.0013*Avogadro*Tf_Plasma
	Total_Tf_conc() = 769.230769230769*Total_Tf/ModelValue_39
	Total_Tf_mg_ml() = 80*Total_Tf_conc
	Total_Fe() = 0.0013*Avogadro*Fe1Tfm_Plasma + 0.0039*Avogadro*Fe2Tfm_Plasma + 0.000214286*Avogadro*FeBM_BoneMarrow + 3.84615e-5*Avogadro*FeDuom_Duodenum + 0.001161905*Avogadro*FeLiverm_Liver + 0.00079*Avogadro*FeRBCm_RBC + 0.019694766*Avogadro*FeRestm_RestOfBody + 6.73077e-5*Avogadro*FeSpleenm_Spleen + 0.0013*Avogadro*NTBIm_Plasma
	Total_Fe__g() = 55.845*Total_Fe/ModelValue_39
	FePlasma() = 0.0013*Avogadro*Fe1Tfm_Plasma + 0.0013*Avogadro*Fe2Tfm_Plasma + 0.0026*Avogadro*Fe2Tfmm_Plasma + 0.0013*Avogadro*NTBIm_Plasma
	FePlasma_conc_() = 769.230769230769*FePlasma/ModelValue_39
	PBM() = 0.0214286*Avogadro*FeBMm_BoneMarrow/Injected
	Total_Fe_concentration() = 43.3793555616728*(0.0013*Avogadro*Fe1Tfm_Plasma + 0.0039*Avogadro*Fe2Tfm_Plasma + 0.000214286*Avogadro*FeBM_BoneMarrow + 3.84615e-5*Avogadro*FeDuom_Duodenum + 0.001161905*Avogadro*FeLiverm_Liver + 0.00079*Avogadro*FeRBCm_RBC + 0.019694766*Avogadro*FeRestm_RestOfBody + 6.73077e-5*Avogadro*FeSpleenm_Spleen + 0.0013*Avogadro*NTBIm_Plasma)/ModelValue_39
	TfSaturation() = (0.26*Avogadro*Fe1Tfm_Plasma + 0.52*Avogadro*Fe2Tfm_Plasma + 0.26*Avogadro*Fe2Tfmm_Plasma)/(0.0052*Avogadro*Fe1Tfm_Plasma + 0.0052*Avogadro*Fe2Tfm_Plasma + 0.0026*Avogadro*Fe2Tfmm_Plasma + 0.0026*Avogadro*Tf_Plasma)
	POutside() = 1.9694766*Avogadro*FeOutsidem_RestOfBody/Injected
	PPlasma() = (0.13*Avogadro*Fe1Tfm_Plasma + 0.13*Avogadro*Fe2Tfm_Plasma + 0.26*Avogadro*Fe2Tfmm_Plasma + 0.13*Avogadro*NTBIm_Plasma)/Injected
	PRest() = 1.9694766*Avogadro*FeRestm_RestOfBody/Injected
	PRBC() = 0.079*Avogadro*FeRBCm_RBC/Injected
	PSpleen() = 0.00673077*Avogadro*FeSpleenm_Spleen/Injected
	PLiver() = 0.1161905*Avogadro*FeLiverm_Liver/Injected
	PDuo() = 0.00384615*Avogadro*FeDuom_Duodenum/Injected
	Total_Fe___in_body() = 0.0013*Avogadro*Fe1Tfm_Plasma + 0.0013*Avogadro*Fe2Tfm_Plasma + 0.0026*Avogadro*Fe2Tfmm_Plasma + 0.000214286*Avogadro*FeBMm_BoneMarrow + 3.84615e-5*Avogadro*FeDuom_Duodenum + 0.001161905*Avogadro*FeLiverm_Liver + 0.00079*Avogadro*FeRBCm_RBC + 0.019694766*Avogadro*FeRestm_RestOfBody + 6.73077e-5*Avogadro*FeSpleenm_Spleen + 0.0013*Avogadro*NTBIm_Plasma
	fRate0() = Ki*VDuoNTBI/(FeDuo_Duodenum*Hepcidin_Plasma + FeDuom_Duodenum*Hepcidin_Plasma + Hepcidin_Plasma*Km + Ki*(FeDuo_Duodenum + FeDuom_Duodenum + Km))
	fRate3() = Ki*VSpleenNTBI/(FeSpleen_Spleen*Hepcidin_Plasma + FeSpleenm_Spleen*Hepcidin_Plasma + Hepcidin_Plasma*Km + Ki*(FeSpleen_Spleen + FeSpleenm_Spleen + Km))
	fRate4() = Ki*VLiverNTBI/(FeLiver_Liver*Hepcidin_Plasma + FeLiverm_Liver*Hepcidin_Plasma + Hepcidin_Plasma*Km + Ki*(FeLiver_Liver + FeLiverm_Liver + Km))
	fRate11() = Ki*VRestNTBI/(FeRest_RestOfBody*Hepcidin_Plasma + FeRestm_RestOfBody*Hepcidin_Plasma + Hepcidin_Plasma*Km + Ki*(FeRest_RestOfBody + FeRestm_RestOfBody + Km))
	fRate20() = Ki*VDuoNTBI/(FeDuo_Duodenum*Hepcidin_Plasma + FeDuom_Duodenum*Hepcidin_Plasma + Hepcidin_Plasma*Km + Ki*(FeDuo_Duodenum + FeDuom_Duodenum + Km))
	fRate23() = Ki*VSpleenNTBI/(FeSpleen_Spleen*Hepcidin_Plasma + FeSpleenm_Spleen*Hepcidin_Plasma + Hepcidin_Plasma*Km + Ki*(FeSpleen_Spleen + FeSpleenm_Spleen + Km))
	fRate24() = Ki*VLiverNTBI/(FeLiver_Liver*Hepcidin_Plasma + FeLiverm_Liver*Hepcidin_Plasma + Hepcidin_Plasma*Km + Ki*(FeLiver_Liver + FeLiverm_Liver + Km))
	fRate31() = Ki*VRestNTBI/(FeRest_RestOfBody*Hepcidin_Plasma + FeRestm_RestOfBody*Hepcidin_Plasma + Hepcidin_Plasma*Km + Ki*(FeRest_RestOfBody + FeRestm_RestOfBody + Km))
end functions
begin reaction rules
	Duo_NTBI: NTBIm(FeDuom~FeDuom,FeLiverm~0,FeOutsidem~0,FeRestm~0)@Duodenum -> NTBIm(FeDuom~0,FeLiverm~0,FeOutsidem~0,FeRestm~0)@Plasma fRate0() #Modifiers(FeDuo_0, Hepcidin)
	Fe2Tf_BM_: Fe2Tfmm()@Plasma -> FeBMm(FeRBCm~0,FeSpleenm~0)@BoneMarrow + FeBMm(FeRBCm~0,FeSpleenm~0)@BoneMarrow + Tf()@Plasma kInBM
	RBC_Spleen: FeBMm(FeRBCm~FeRBCm,FeSpleenm~0)@RBC -> FeBMm(FeRBCm~0,FeSpleenm~FeSpleenm)@Spleen vRBCSpleen
	Spleen_NTBI: FeBMm(FeRBCm~0,FeSpleenm~FeSpleenm)@Spleen -> NTBIm(FeDuom~0,FeLiverm~0,FeOutsidem~0,FeRestm~0)@Plasma fRate3() #Modifiers(FeSpleen_0, Hepcidin)
	Liver_NTBI: NTBIm(FeDuom~0,FeLiverm~FeLiverm,FeOutsidem~0,FeRestm~0)@Liver -> NTBIm(FeDuom~0,FeLiverm~0,FeOutsidem~0,FeRestm~0)@Plasma fRate4() #Modifiers(FeLiver_0, Hepcidin)
	NTBI_Fe1Tf: NTBIm(FeDuom~0,FeLiverm~0,FeOutsidem~0,FeRestm~0)@Plasma + Tf()@Plasma -> Fe1Tfm()@Plasma kNTBI_Fe1Tf
	DuoLoss: NTBIm(FeDuom~FeDuom,FeLiverm~0,FeOutsidem~0,FeRestm~0)@Duodenum -> NTBIm(FeDuom~0,FeLiverm~0,FeOutsidem~FeOutsidem,FeRestm~0)@RestOfBody kDuoLoss
	Fe2Tf_Liver_: Fe2Tfmm()@Plasma -> NTBIm(FeDuom~0,FeLiverm~FeLiverm,FeOutsidem~0,FeRestm~0)@Liver + NTBIm(FeDuom~0,FeLiverm~FeLiverm,FeOutsidem~0,FeRestm~0)@Liver + Tf()@Plasma kInLiver
	Fe2Tf_Rest_: Fe2Tfmm()@Plasma -> NTBIm(FeDuom~0,FeLiverm~0,FeOutsidem~0,FeRestm~FeRestm)@RestOfBody + NTBIm(FeDuom~0,FeLiverm~0,FeOutsidem~0,FeRestm~FeRestm)@RestOfBody + Tf()@Plasma kInRest
	RestLoss: NTBIm(FeDuom~0,FeLiverm~0,FeOutsidem~0,FeRestm~FeRestm)@RestOfBody -> NTBIm(FeDuom~0,FeLiverm~0,FeOutsidem~FeOutsidem,FeRestm~0)@RestOfBody kRestLoss
	Fe2Tf_Duo_: Fe2Tfmm()@Plasma -> NTBIm(FeDuom~FeDuom,FeLiverm~0,FeOutsidem~0,FeRestm~0)@Duodenum + NTBIm(FeDuom~FeDuom,FeLiverm~0,FeOutsidem~0,FeRestm~0)@Duodenum + Tf()@Plasma kInDuo
	Rest_NTBI: NTBIm(FeDuom~0,FeLiverm~0,FeOutsidem~0,FeRestm~FeRestm)@RestOfBody -> NTBIm(FeDuom~0,FeLiverm~0,FeOutsidem~0,FeRestm~0)@Plasma fRate11() #Modifiers(FeRest_0, Hepcidin)
	Fe1Tf__Fe2Tf_: Fe1Tfm()@Plasma + NTBIm(FeDuom~0,FeLiverm~0,FeOutsidem~0,FeRestm~0)@Plasma -> Fe2Tfmm()@Plasma kFe1Tf_Fe2Tf
	Fe1Tf_Liver: Fe1Tfm()@Plasma -> NTBIm(FeDuom~0,FeLiverm~FeLiverm,FeOutsidem~0,FeRestm~0)@Liver + Tf()@Plasma kInLiver
	Fe1Tf_BM: Fe1Tfm()@Plasma -> FeBMm(FeRBCm~0,FeSpleenm~0)@BoneMarrow + Tf()@Plasma kInBM
	Fe1Tf_Rest: Fe1Tfm()@Plasma -> NTBIm(FeDuom~0,FeLiverm~0,FeOutsidem~0,FeRestm~FeRestm)@RestOfBody + Tf()@Plasma kInRest
	Fe1Tf_Duo: Fe1Tfm()@Plasma -> NTBIm(FeDuom~FeDuom,FeLiverm~0,FeOutsidem~0,FeRestm~0)@Duodenum + Tf()@Plasma kInDuo
	Diet: 0  -> NTBI(FeDuo~FeDuo,FeLiver~0,FeOutside~0,FeRest~0)@Duodenum vDiet
	HepcidinSynthesis: 0  -> Hepcidin()@Plasma r19_v
	HepcidinDecay: Hepcidin()@Plasma -> 0  r20_k1
	Duo_NTBI_0: NTBI(FeDuo~FeDuo,FeLiver~0,FeOutside~0,FeRest~0)@Duodenum -> NTBI(FeDuo~0,FeLiver~0,FeOutside~0,FeRest~0)@Plasma fRate20() #Modifiers(FeDuo, Hepcidin)
	Fe2Tf_BM: Fe2Tf()@Plasma -> FeBM(FeRBC~0,FeSpleen~0)@BoneMarrow + FeBM(FeRBC~0,FeSpleen~0)@BoneMarrow + Tf()@Plasma kInBM
	RBC_Spleen_0: FeBM(FeRBC~FeRBC,FeSpleen~0)@RBC -> FeBM(FeRBC~0,FeSpleen~FeSpleen)@Spleen vRBCSpleen
	Spleen_NTBI_0: FeBM(FeRBC~0,FeSpleen~FeSpleen)@Spleen -> NTBI(FeDuo~0,FeLiver~0,FeOutside~0,FeRest~0)@Plasma fRate23() #Modifiers(FeSpleen, Hepcidin)
	Liver_NTBI_0: NTBI(FeDuo~0,FeLiver~FeLiver,FeOutside~0,FeRest~0)@Liver -> NTBI(FeDuo~0,FeLiver~0,FeOutside~0,FeRest~0)@Plasma fRate24() #Modifiers(FeLiver, Hepcidin)
	NTBI_Fe1Tf_0: NTBI(FeDuo~0,FeLiver~0,FeOutside~0,FeRest~0)@Plasma + Tf()@Plasma -> Fe1Tf()@Plasma kNTBI_Fe1Tf
	DuoLoss_0: NTBI(FeDuo~FeDuo,FeLiver~0,FeOutside~0,FeRest~0)@Duodenum -> NTBI(FeDuo~0,FeLiver~0,FeOutside~FeOutside,FeRest~0)@RestOfBody kDuoLoss
	Fe2Tf_Liver: Fe2Tf()@Plasma -> NTBI(FeDuo~0,FeLiver~FeLiver,FeOutside~0,FeRest~0)@Liver + NTBI(FeDuo~0,FeLiver~FeLiver,FeOutside~0,FeRest~0)@Liver + Tf()@Plasma kInLiver
	Fe2Tf_Rest: Fe2Tf()@Plasma -> NTBI(FeDuo~0,FeLiver~0,FeOutside~0,FeRest~FeRest)@RestOfBody + NTBI(FeDuo~0,FeLiver~0,FeOutside~0,FeRest~FeRest)@RestOfBody + Tf()@Plasma kInRest
	RestLoss_0: NTBI(FeDuo~0,FeLiver~0,FeOutside~0,FeRest~FeRest)@RestOfBody -> NTBI(FeDuo~0,FeLiver~0,FeOutside~FeOutside,FeRest~0)@RestOfBody kRestLoss
	Fe2Tf_Duo: Fe2Tf()@Plasma -> NTBI(FeDuo~FeDuo,FeLiver~0,FeOutside~0,FeRest~0)@Duodenum + NTBI(FeDuo~FeDuo,FeLiver~0,FeOutside~0,FeRest~0)@Duodenum + Tf()@Plasma kInDuo
	Rest_NTBI_0: NTBI(FeDuo~0,FeLiver~0,FeOutside~0,FeRest~FeRest)@RestOfBody -> NTBI(FeDuo~0,FeLiver~0,FeOutside~0,FeRest~0)@Plasma fRate31() #Modifiers(FeRest, Hepcidin)
	Fe1Tf_Fe2Tf: Fe1Tf()@Plasma + NTBI(FeDuo~0,FeLiver~0,FeOutside~0,FeRest~0)@Plasma -> Fe2Tf()@Plasma kFe1Tf_Fe2Tf
	Fe1Tf_Liver_0: Fe1Tf()@Plasma -> NTBI(FeDuo~0,FeLiver~FeLiver,FeOutside~0,FeRest~0)@Liver + Tf()@Plasma kInLiver
	Fe1Tf_BM_0: Fe1Tf()@Plasma -> FeBM(FeRBC~0,FeSpleen~0)@BoneMarrow + Tf()@Plasma kInBM
	Fe1Tf_Rest_0: Fe1Tf()@Plasma -> NTBI(FeDuo~0,FeLiver~0,FeOutside~0,FeRest~FeRest)@RestOfBody + Tf()@Plasma kInRest
	Fe1Tf_Duo_0: Fe1Tf()@Plasma -> NTBI(FeDuo~FeDuo,FeLiver~0,FeOutside~0,FeRest~0)@Duodenum + Tf()@Plasma kInDuo
	Fe1Tf_Fe2Tf_0: Fe1Tf()@Plasma + NTBIm(FeDuom~0,FeLiverm~0,FeOutsidem~0,FeRestm~0)@Plasma -> Fe2Tfm()@Plasma kFe1Tf_Fe2Tf
	Fe1Tf__Fe2Tf: Fe1Tfm()@Plasma + NTBI(FeDuo~0,FeLiver~0,FeOutside~0,FeRest~0)@Plasma -> Fe2Tfm()@Plasma kFe1Tf_Fe2Tf
	Fe2Tf_Duo_0: Fe2Tfm()@Plasma -> NTBIm(FeDuom~FeDuom,FeLiverm~0,FeOutsidem~0,FeRestm~0)@Duodenum + NTBI(FeDuo~FeDuo,FeLiver~0,FeOutside~0,FeRest~0)@Duodenum + Tf()@Plasma kInDuo
	Fe2Tf_Liver_0: Fe2Tfm()@Plasma -> NTBIm(FeDuom~0,FeLiverm~FeLiverm,FeOutsidem~0,FeRestm~0)@Liver + NTBI(FeDuo~0,FeLiver~FeLiver,FeOutside~0,FeRest~0)@Liver + Tf()@Plasma kInLiver
	Fe2Tf_BM_0: Fe2Tfm()@Plasma -> FeBMm(FeRBCm~0,FeSpleenm~0)@BoneMarrow + FeBM(FeRBC~0,FeSpleen~0)@BoneMarrow + Tf()@Plasma kInBM
	Fe2Tf_Rest_0: Fe2Tfm()@Plasma -> NTBIm(FeDuom~0,FeLiverm~0,FeOutsidem~0,FeRestm~FeRestm)@RestOfBody + NTBI(FeDuo~0,FeLiver~0,FeOutside~0,FeRest~FeRest)@RestOfBody + Tf()@Plasma kInRest
	BM_RBC: FeBM(FeRBC~0,FeSpleen~0)@BoneMarrow -> FeBM(FeRBC~FeRBC,FeSpleen~0)@RBC kInRBC
	BM_RBC_0: FeBMm(FeRBCm~0,FeSpleenm~0)@BoneMarrow -> FeBMm(FeRBCm~FeRBCm,FeSpleenm~0)@RBC kInRBC
	BM_Spleen: FeBM(FeRBC~0,FeSpleen~0)@BoneMarrow -> FeBM(FeRBC~0,FeSpleen~FeSpleen)@Spleen kBMSpleen
	BM_Spleen_0: FeBMm(FeRBCm~0,FeSpleenm~0)@BoneMarrow -> FeBMm(FeRBCm~0,FeSpleenm~FeSpleenm)@Spleen kBMSpleen
end reaction rules
end model
