###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000742', 'http://identifiers.org/biomodels.db/MODEL1907050005']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/doi/10.1101/498741']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0002418']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@creatorEmail:'jm2187@cam.ac.uk'
#@creatorName:'Men Jinghao'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 2 molecules and 6 reactions. The translated model has 2 molecules and 6 rules'
###
begin model
begin parameters
	a 0.514 #units:unit_0
	b 1.02e-09 #units:unit_1
	k 0.0001 #units:unit_0
	s 10.0 #units:unit_0
	m -1e-06 #units:unit_0
	d 0.02 #units:unit_0
end parameters
begin molecule types
	#^ bqbiol:isVersionOf cl:CL:0001063
	T()
	#^ bqbiol:isVersionOf ncit:C28241, cl:CL:0000738
	E()
end molecule types
begin seed species
	T() 6.022000000000001e+22 # (100.0 * 0.001)mol/L * 6.022e23/mol *1.0L #T #T
	E() 6.022e+23 #original 1000.0substance/volume  #E #E
end seed species
begin observables
	Species T T() #T
	Species E E() #E
end observables
begin functions
	fRate0() = T*a
	fRate1() = T*a*b
	fRate2() = E*k
	fRate5() = E*T*m
end functions
begin reaction rules
	tumor_growth: 0  -> T() fRate0()
	tumor_death: T() -> 0  fRate1()
	tumor_killing: T() -> 0  fRate2() #Modifiers(E)
	immune_cell_death: E() -> 0  d
	immune_cell_growth: 0  -> E() s
	immune_stimulation: 0  -> E() fRate5() #Modifiers(T)
end reaction rules
end model
