###
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/24511375']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0002418']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000751', 'http://identifiers.org/biomodels.db/MODEL1907160002']
#@creatorEmail:'jm2187@cam.ac.uk'
#@creatorName:'Men Jinghao'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 2 molecules and 3 reactions. The translated model has 2 molecules and 3 rules'
###
begin model
begin parameters
	a 0.2 #units:unit_0
	K 10000000000.0 #units:unit_0
	y 0.2 #units:unit_0
	Ie 100.0 #units:unit_0
	u 0.001 #units:unit_0
end parameters
begin molecule types
	#^ bqbiol:isVersionOf cl:CL:0001064
	C()
	#^ bqbiol:isVersionOf ncit:C28241
	I()
end molecule types
begin seed species
	C() 6.022e+20 # (1.0 * 0.001)mol/L * 6.022e23/mol *1.0L #C #C
	I() 6.022000000000001e+22 #original 100.0substance/volume #I #I
end seed species
begin observables
	Species C C() #C
	Species I I() #I
end observables
begin functions
	a0() = 0.000105*exp(-0.00594883997620464*time())
	fRate0() = I*y
	fRate0m() = I*y/(C*I*u + Ie)
	fRate1() = C*a
	fRate1m() = C*a/K
	fRate2() = I*a0
end functions
begin reaction rules
	immune_growth: 0  <-> I() fRate0(),fRate0m() #Modifiers(C)
	cancer_logistic_growth: 0  <-> C() fRate1(),fRate1m()
	cancer_killing: C() -> 0  fRate2() #Modifiers(I)
end reaction rules
end model
