###
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/23734575']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0002418']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1907180001', 'http://identifiers.org/biomodels.db/BIOMD0000000753']
#@creatorEmail:'jm2187@cam.ac.uk'
#@creatorName:'Men Jinghao'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 2 molecules and 7 reactions. The translated model has 2 molecules and 7 rules'
###
begin model
begin parameters
	a 1.636 #units:unit_0
	b 0.004 #units:unit_0
	n 1.0 #units:unit_0
	p 1.131 #units:unit_0
	g 20.19 #units:unit_0
	m 0.00311 #units:unit_0
	d 2.0 #units:unit_0
	s 0.318 #units:unit_0
end parameters
begin molecule types
	#^ bqbiol:isVersionOf cl:CL:0001064
	T()
	#^ bqbiol:isVersionOf ncit:C28241
	E()
end molecule types
begin seed species
	T() 3.0110000000000005e+22 # (50.0 * 0.001)mol/L * 6.022e23/mol *1.0L #T #T
	E() 3.011e+21 #original 5.0substance/volume  #E #E
end seed species
begin observables
	Species T T() #T
	Species E E() #E
end observables
begin functions
	fRate0() = T*a
	fRate1() = T*a*b
	fRate2() = E*n
	fRate3() = E*T*p/(T + g)
	fRate4() = T*m
end functions
begin reaction rules
	tumor_growth: 0  -> T() fRate0()
	tumor_death: T() -> 0  fRate1()
	tumor_killing: T() -> 0  fRate2() #Modifiers(E)
	immune_stimulation: 0  -> E() fRate3() #Modifiers(T)
	immune_exhaustion: E() -> 0  fRate4() #Modifiers(T)
	immune_death: E() -> 0  d
	immune_source: 0  -> E() s
end reaction rules
end model
