###
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/16849579']
#@BQB_HAS_PART:['http://identifiers.org/go/GO:0002419', 'http://identifiers.org/go/GO:0002420']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046', 'http://identifiers.org/ncit/C15543', 'http://identifiers.org/ncit/C15438']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/10090']
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1907230001', 'http://identifiers.org/biomodels.db/BIOMD0000000761']
#@creatorEmail:'sheriff@ebi.ac.uk'
#@creatorName:'Sheriff Rahuman'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 6 molecules and 14 reactions. The translated model has 6 molecules and 14 rules'
###
begin model
begin parameters
	mu1 10.0 #units:unit_0
	h 634.0 #units:unit_1
	r1 0.095 #units:unit_0
	p1 0.01
	p2 1.054
	q1 0.54
	a 0.58 #units:unit_2
	mu2 0.014 #units:unit_0
	r2 0.26 #units:unit_0
	sigma 0.003
	h2zero 0.066
	D 1418.4
	b1 1.0 #units:unit_3
	b2 0.1 #units:unit_4
	mu3 0.08 #units:unit_0
	r3 0.48 #units:unit_0
	K 400.0 #units:unit_5
	c 5.1 #units:unit_6
	d 0.145
	k1 0.05 #units:unit_7
	k2 0.0485 #units:unit_7
	z0 2.0
end parameters
begin molecule types
	#^ bqbiol:isVersionOf bto:BTO:0000914
	#^ bqbiol:occursIn bto:BTO:0001281
	X_NK_T_Cells()
	#^ bqbiol:isVersionOf ncit:C48806
	M_CD8_Memory_Factor()
	#^ bqbiol:is uniprot:Q9ES17
	U_IL_21()
	#^ bqbiol:isVersionOf ncit:C12542, cl:CL:0000811
	#^ bqbiol:occursIn bto:BTO:0000784
	Y_CD8_T_Cells()
	#^ bqbiol:hasVersion uniprot:A2RSY7, uniprot:C4NUM1
	P_Cytotoxic_Protein()
	#^ bqbiol:isVersionOf ncit:C25245
	#^ bqbiol:isPropertyOf ncit:C98275
	Z_Tumor_SA()
end molecule types
begin seed species
	X_NK_T_Cells() 1175404070000000.0 # (1.95185 * 1e-09)mol/L * 6.022e23/mol *1.0L #X_NK_T_Cells #X
	Y_CD8_T_Cells() 39745200000000.01 #original 0.066substance/volume  #Y_CD8_T_Cells #Y
	Z_Tumor_SA() 1204400000000000.2 #original 2.0substance/volume  #Z_Tumor_SA #Z
end seed species
begin observables
	Species U_IL_21 U_IL_21() #U_IL-21
	Species X_NK_T_Cells X_NK_T_Cells() #X_NK_T_Cells
	Species Y_CD8_T_Cells Y_CD8_T_Cells() #Y_CD8_T_Cells
	Species M_CD8_Memory_Factor M_CD8_Memory_Factor() #M_CD8_Memory_Factor
	Species P_Cytotoxic_Protein P_Cytotoxic_Protein() #P_Cytotoxic_Protein
	Species Z_Tumor_SA Z_Tumor_SA() #Z_Tumor_SA
end observables
begin functions
	fRate1() = Z_Tumor_SA^1.5*h
	fRate2() = X_NK_T_Cells*r1
	fRate3() = X_NK_T_Cells^2*r1*(U_IL_21 + q1)/(U_IL_21*p1 + p2)
	fRate4() = Y_CD8_T_Cells*r2
	fRate5() = Y_CD8_T_Cells*r2*(1.0*D + M_CD8_Memory_Factor)/(D*M_CD8_Memory_Factor*sigma + h2zero*(1.0*D + M_CD8_Memory_Factor))
	fRate6() = U_IL_21*a
	fRate8() = U_IL_21*b1/(U_IL_21 + b2)
	fRate10() = P_Cytotoxic_Protein*X_NK_T_Cells*k1
	fRate11() = P_Cytotoxic_Protein*Y_CD8_T_Cells*k2
	fRate13() = 1.0e-6*Z_Tumor_SA
end functions
begin reaction rules
	IL_21_Clearance_Rate: U_IL_21() -> 0  mu1
	IL_21_Production_by_Tumor: 0  -> U_IL_21() fRate1() #Modifiers(Z)
	NK_Cell_Population_Growth: 0  -> X_NK_T_Cells() fRate2()
	NK_Cell_Population_Growth_IL_21_Inhibition_reactants_0: 0  -> X_NK_T_Cells() -1*(fRate3()) #Modifiers(X, U)
	CD8_Population_Growth: 0  -> Y_CD8_T_Cells() fRate4()
	CD8_Population_Growth_Inhibition: Y_CD8_T_Cells() -> 0  fRate5() #Modifiers(M)
	CD8_Memory_Formation: 0  -> M_CD8_Memory_Factor() fRate6() #Modifiers(U)
	CD8_Memory_Loss: M_CD8_Memory_Factor() -> 0  mu2
	Cytotoxic_Protein_Secretion: 0  -> P_Cytotoxic_Protein() fRate8() #Modifiers(U)
	Cytotoxic_Protein_Degradation: P_Cytotoxic_Protein() -> 0  mu3
	Tumor_Killing_By_NK_Cells: Z_Tumor_SA() -> 0  fRate10() #Modifiers(P, X)
	Tumor_Killing_By_CD8_Cells: Z_Tumor_SA() -> 0  fRate11() #Modifiers(P, Y)
	Tumor_Growth: 0  -> Z_Tumor_SA() c
	Tumor_Growth_Exponential: 0  -> Z_Tumor_SA() fRate13() #Modifiers(Z)
end reaction rules
end model
