###
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/28219660']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046', 'http://identifiers.org/go/GO:0002418', 'http://identifiers.org/efo/0000756']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000769', 'http://identifiers.org/biomodels.db/MODEL1907310003']
#@creatorEmail:'jm2187@cam.ac.uk'
#@creatorName:'Men Jinghao'
#@notes:'This is an atomized translation of an SBML model created on 13/08/2021. The original model has 5 molecules and 24 reactions. The translated model has 5 molecules and 24 rules'
###
begin model
begin parameters
	a 0.69 #units:unit_0
	b 1000000000.0 #units:unit_1
	f 1e-08 #units:unit_0
	gh1 4.8e-09 #units:unit_0
	gh2 1e-09 #units:unit_0
	gm1 6e-09 #units:unit_0
	gm2 2.3e-10 #units:unit_0
	nh1 1e-07 #units:unit_0
	nh2 1e-07 #units:unit_0
	nm1 1e-07 #units:unit_0
	nm2 1e-07 #units:unit_0
	ah1 0.008 #units:unit_0
	ah2 0.001 #units:unit_0
	am1 0.001 #units:unit_0
	am2 0.001 #units:unit_0
	m1 100000000.0 #units:unit_1
	m2 1000000000.0 #units:unit_1
	ph1 0.09 #units:unit_0
	ph2 0.09 #units:unit_0
	pm1 0.02 #units:unit_0
	pm2 0.02 #units:unit_0
	rm1 0.09 #units:unit_0
	rm2 0.05 #units:unit_0
	eh1 0.03 #units:unit_0
	eh2 0.03 #units:unit_0
	em1 0.02 #units:unit_0
	em2 0.02 #units:unit_0
end parameters
begin molecule types
	#^ bqbiol:isVersionOf cl:CL:0001064
	T()
	#^ bqbiol:isVersionOf cl:CL:0000545
	H1()
	#^ bqbiol:isVersionOf ncit:C123783
	M2()
	#^ bqbiol:isVersionOf cl:CL:0000546
	H2()
	#^ bqbiol:isVersionOf ncit:C156004
	M1()
end molecule types
begin seed species
	T() 6.022e+25 # (100000.0 * 0.001)mol/L * 6.022e23/mol *1.0L #T #T
	M1() 6.022000000000001e+22 #original 100.0substance/volume  #M1 #M1
end seed species
begin observables
	Species T T() #T
	Species H1 H1() #H1
	Species H2 H2() #H2
	Species M1 M1() #M1
	Species M2 M2() #M2
end observables
begin functions
	fRate0() = T*a
	fRate0m() = T*a/b
	fRate2() = H1*gh1
	fRate3() = H2*gh2
	fRate4() = M1*gm1
	fRate5() = M2*T*gm2
	fRate6() = M1*ah1
	fRate7() = H1*M1*ph1*(1 - (H1 + H2)/m1)
	fRate8() = T*nh1
	fRate10() = M2*ah2
	fRate11() = H2*M2*ph2*(1 - (H1 + H2)/m1)
	fRate12() = T*nh2
	fRate14() = H1*am1
	fRate15() = M1*pm1*(1 - (M1 + M2)/m2)
	fRate16() = T*nm1
	fRate20() = H2*am2
	fRate21() = H2*M2*pm2*(1 - (M1 + M2)/m2)
	fRate22() = M2*T*nm2
end functions
begin reaction rules
	tumor_growth: 0  <-> T() fRate0(),fRate0m()
	tumor_death: T() -> 0  f
	tumor_H1: T() -> 0  fRate2() #Modifiers(H1)
	tumor_H2: T() -> 0  fRate3() #Modifiers(H2)
	tumor_M1: T() -> 0  fRate4() #Modifiers(M1)
	tumor_M2: 0  -> T() fRate5() #Modifiers(M2)
	H1_M1: 0  -> H1() fRate6() #Modifiers(M1)
	H1_growth_products_0: 0  -> H1() fRate7() #Modifiers(M1, H2)
	H1_exhaustion: H1() -> 0  fRate8() #Modifiers(T)
	H1_death: H1() -> 0  eh1
	H2_M2: 0  -> H2() fRate10() #Modifiers(M2)
	H2_growth_products_0: 0  -> H2() fRate11() #Modifiers(M2, H1)
	H2_exhaustion: H2() -> 0  fRate12() #Modifiers(T)
	H2_death: H2() -> 0  eh2
	M1_H1: 0  -> M1() fRate14() #Modifiers(H1)
	M1_growth_products_0: 0  -> M1() fRate15() #Modifiers(M2)
	M1_exhaustion: M1() -> 0  fRate16() #Modifiers(T)
	M1_death: M1() -> 0  em1
	M1_M2_transition: M1() -> M2() rm2
	M2_M1_transition: M2() -> M1() rm1
	M2_H2: 0  -> M2() fRate20() #Modifiers(H2)
	M2_growth_products_0: 0  -> M2() fRate21() #Modifiers(H2, M1)
	M2_stimulation: 0  -> M2() fRate22() #Modifiers(T)
	M2_death: M2() -> 0  em2
end reaction rules
end model
