###
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/28970093']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046', 'http://identifiers.org/go/GO:0001788']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000802', 'http://identifiers.org/biomodels.db/MODEL1908200002']
#@creatorEmail:'jm2187@cam.ac.uk'
#@creatorName:'Men Jinghao'
#@notes:'This is an atomized translation of an SBML model created on 14/08/2021. The original model has 4 molecules and 8 reactions. The translated model has 4 molecules and 8 rules'
###
begin model
begin parameters
	a1 0.001 #units:unit_0
	a2 1.44 #units:unit_0
	v1 120.0 #units:unit_0
	u 20.0 #units:unit_0
	v2 14.4 #units:unit_0
	fk 1.0 #units:unit_0
	rk 0.5 #units:unit_0
	__e__ 0.001 #units:unit_0
	n 0
end parameters
begin molecule types
	#^ bqbiol:isVersionOf ncit:C16295
	A()
	#^ bqbiol:isVersionOf cl:CL:0001064
	S()
	#^ bqbiol:isVersionOf ncit:C19398
	R()
	#^ bqbiol:isVersionOf ncit:C19398
	C()
end molecule types
begin seed species
	A() 6.022e+20 # (1.0 * 0.001)mol/L * 6.022e23/mol *1.0L #A #A
	S() 6.022e+20 #original 1.0substance/volume #S #S
end seed species
begin observables
	Species A A() #A
	Species R R() #R
	Species S S() #S
	Species C C() #C
end observables
begin functions
	__e__() = a1
	y() = __e__^n
	f() = R*fk/(R + rk)
	fRate0() = S*a1
	fRate0m() = A*R*S*a1
	fRate1() = R*S*a2*y
	fRate2() = A*a1/y
	fRate2m() = A*a1/y
	fRate5() = v1*(-C + S)*(-C + u)
	fRate7() = C*f
end functions
begin reaction rules
	antibody_association: A() <-> 0  fRate0(),fRate0m() #Modifiers(R, S)
	antibody_dissociation: 0  -> A() fRate1() #Modifiers(R, S)
	complex_formation: 0  <-> R() fRate2(),fRate2m() #Modifiers(A)
	complex_dissociation: R() -> 0  a2
	cancer_cell_killing_C: C() -> 0  f
	NK_complex_formation_products_0: 0  -> C() fRate5() #Modifiers(S)
	NK_complex_degradation: C() -> 0  v2
	cancer_cell_killing_S_reactants_0: 0  -> S() -1*(fRate7()) #Modifiers(C)
end reaction rules
end model
