###
#@BQB_HAS_PROPERTY:['http://identifiers.org/ncit/C17132', 'http://identifiers.org/ncit/C3058', 'http://identifiers.org/efo/0000311', 'http://identifiers.org/mamo/MAMO_0000046', 'http://identifiers.org/go/GO:0023052']
#@BQB_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/31009513']
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000829', 'http://identifiers.org/biomodels.db/MODEL1910020001']
#@creatorEmail:'muffet0307@gmail.com'
#@creatorName:'Ng Szeyi'
#@notes:'This is an atomized translation of an SBML model created on 14/08/2021. The original model has 13 molecules and 28 reactions. The translated model has 11 molecules and 28 rules'
###
begin model
begin parameters
	myu_G 0.5
	l_1 4.0
	l_2 1.0
	alpha 1.6
	l_3 4.0
	l_4 1.0
	beta 1.0
	S_1 0.2
	epsilon_1 0.02
	l_5 4.0
	l_6 1.0
	gamma 1.0
	S_2 1.2
	epsilon_2 0.02
	myu_D 1.316
	k_1 0.12
	k_2 0.12
	k_2_ 4.5
	p27_p21 1.05
	zeta_2 1.0
	K 0.01
	n_2 10.0
	K_H 10.0
	k_3 3.0
	k_3_ 30.0
	k_4 105.0
	J_3 0.04
	J_4 0.04
	zeta_1 2.5
	n_1 10.0
	K_m 0.5
	k_5 0.015
	k_5_ 0.6
	k_6 0.3
	n 4.0
	J_5 0.3
	k_7 3.0
	J_7 0.001
	k_8 1.5
	J_8 0.001
	Mad 1.0
	k_9 0.3
	k_10 0.06
	myu 0.03
	epsilon 0.006
	myu_hat 0.5
	m 10.0
	u_1 0
	u_2 0
	deltaD exp(0) #original 1.0substance/volume
	mass_s 2.7099e+20 #original 2.95substance/volume
end parameters
begin molecule types
	#^ bqbiol:isVersionOf uniprot:Q12834
	p55cdc_T()
	#^ bqbiol:isVersionOf chebi:CHEBI:23888
	DrugD()
	#^ bqbiol:isVersionOf uniprot:P56211, ncit:C82834
	miR_451M()
	#^ bqbiol:isVersionOf ncit:C43246
	mass()
	#^ bqbiol:isVersionOf uniprot:P54646, ncit:C94701
	AMPKA()
	#^ bqbiol:isVersionOf uniprot:Q8WWL7
	CycB()
	#^ bqbiol:isVersionOf uniprot:P53350
	Plk1()
	#^ bqbiol:isVersionOf uniprot:Q9UM11
	Cdh1()
	#^ bqbiol:isVersionOf cco:CCO:2475, uniprot:P42345, ncit:C38928
	mTORR()
	#^ bqbiol:isVersionOf uniprot:Q12834
	p55cdc_A()
	#^ bqbiol:isVersionOf chebi:CHEBI:17234
	GlucoseG()
end molecule types
begin seed species
	GlucoseG() 0.39999064405809553 # (6.64215616170866e-22 * 0.001)mol/L * 6.022e23/mol *1.0L #GlucoseG #Glucose_G
	miR_451M() 1.8399569626672374 #original 3.05539183438598e-21substance/volume #miR_451M #miR_451_M
	AMPKA() 1.2499707626815508 #original 2.07567380053396e-21substance/volume #AMPKA #AMPK_A
	mTORR() 2.759935444000856 #original 4.58308775157897e-21substance/volume #mTORR #mTOR_R
	Cdh1() 6.022e+20 #original 1.0substance/volume #Cdh1 #Cdh1
	CycB() 6.022000000000001e+19 #original 0.1substance/volume #CycB #CycB
	p55cdc_T() 6.022e+20 #original 1.0substance/volume #p55cdc_T #p55cdc_T
	mass() 2.7099000000000003e+20 #original 0.45substance/volume #mass #mass
	p55cdc_A() 5.1187e+20 #original 0.85substance/volume #p55cdc_A #p55cdc_A
	Plk1() 3.6132e+20 #original 0.6substance/volume #Plk1 #Plk1
end seed species
begin observables
	Species GlucoseG GlucoseG() #Glucose G
	Species DrugD DrugD() #Drug D
	Species miR_451M miR_451M() #miR-451 M
	Species AMPKA AMPKA() #AMPK A
	Species mTORR mTORR() #mTOR R
	Species Cdh1 Cdh1() #Cdh1
	Species CycB CycB() #CycB
	Species p55cdc_T p55cdc_T() #p55cdc_T
	Species mass mass() #mass
	Species p55cdc_A p55cdc_A() #p55cdc_A
	Species Plk1 Plk1() #Plk1
end observables
begin functions
	deltaD_ar() = exp(-DrugD)
	mass_s_ar() = mass + zeta_1*(1/mTORR)^n_1/(K_m^n_1 + (1/mTORR)^n_1)
	myu_0() = epsilon*myu_hat + myu
	HIF() = K^(-n_2)*zeta_2/(K_H^n_2 + (1/K)^n_2)
	fRate4() = (1.0*GlucoseG*(AMPKA^2*alpha + l_2^2) + l_1*l_2^2)/(1.0*AMPKA^2*alpha + 1.0*l_2^2)
	fRate6() = S_1/epsilon_1
	fRate7() = l_3*l_4^2/(epsilon_1*(beta*miR_451M^2 + l_4^2))
	fRate8() = 1/epsilon_1
	fRate9() = S_2/epsilon_2
	fRate10() = l_5*l_6^2/(epsilon_2*(AMPKA^2*deltaD_ar*gamma + l_6^2))
	fRate11() = 1/epsilon_2
	fRate12() = k_3/(-Cdh1 + J_3 + 1.0)
	fRate12m() = k_3/(-Cdh1 + J_3 + 1.0)
	fRate13() = k_3_*p55cdc_A/(-Cdh1 + J_3 + 1.0)
	fRate13m() = k_3_*p55cdc_A/(-Cdh1 + J_3 + 1.0)
	fRate15() = Cdh1*k_2_
	fRate17() = CycB*k_4*mass_s_ar/(Cdh1 + J_4)
	fRate18() = HIF*p27_p21
	fRate21() = k_5_*(CycB*mass_s_ar)^n/(J_5^n + (CycB*mass_s_ar)^n)
	fRate22() = Plk1*k_7*p55cdc_T/(J_7 - p55cdc_A + p55cdc_T)
	fRate22m() = Plk1*k_7/(J_7 - p55cdc_A + p55cdc_T)
	fRate23() = Mad*k_8/(J_8 + p55cdc_A)
	fRate25() = CycB*k_9*mass_s_ar
	fRate25m() = CycB*k_9*mass_s_ar
	fRate27() = mass*myu_0
	fRate27m() = mass*myu_0/m
end functions
begin reaction rules
	Dose_for_Glucose: 0  -> GlucoseG() u_1
	Dose_for_Drug: 0  -> DrugD() u_2
	Consumption_of_Glucose: GlucoseG() -> 0  myu_G
	Decay_of_Drug: DrugD() -> 0  myu_D
	Production_of_miR_451: 0  -> miR_451M() fRate4() #Modifiers(Glucose_G, AMPK_A)
	loss_of_miR_451: miR_451M() -> 0  1.00000000000000
	signal_source_of_AMPK: 0  -> AMPKA() fRate6()
	Production_of_AMPK: 0  -> AMPKA() fRate7() #Modifiers(miR_451_M)
	loss_of_AMPK: AMPKA() -> 0  fRate8()
	signal_source_of_mTOR: 0  -> mTORR() fRate9()
	Production_of_mTOR: 0  -> mTORR() fRate10() #Modifiers(deltaD, AMPK_A)
	loss_of_mTOR: mTORR() -> 0  fRate11() #Modifiers(mTOR_R)
	Activation_of_Cdh1: 0  <-> Cdh1() fRate12(),fRate12m()
	Activation_of_Cdh1_by_p55cdc_A: 0  <-> Cdh1() fRate13(),fRate13m() #Modifiers(p55cdc_A)
	Degradation_of_CycB: CycB() -> 0  k_2
	Degradation_of_CycB_by_Cdh1: CycB() -> 0  fRate15() #Modifiers(Cdh1)
	Degradation_of_p55cdc_T: p55cdc_T() -> 0  k_6
	Inactivation_of_Cdh1_by_CycB: Cdh1() -> 0  fRate17() #Modifiers(mass_s, CycB)
	inhibitory_effect_of_p21_or_p27_genes: CycB() -> 0  fRate18()
	Production_of_CycB: 0  -> CycB() k_1
	production_of_p55cdc_T: 0  -> p55cdc_T() k_5
	transcription_of_p55cdc_T_by_CycB: 0  -> p55cdc_T() fRate21() #Modifiers(CycB, mass_s)
	Activation_of_p55cdc_A_by_Plk1: 0  <-> p55cdc_A() fRate22(),fRate22m() #Modifiers(Plk1, p55cdc_T)
	Inactivation_of_p55cdc_A: p55cdc_A() -> 0  fRate23()
	Degradation_of_p55cdc_A: p55cdc_A() -> 0  k_6
	Activation_of_Plk1_by_CycB: 0  <-> Plk1() fRate25(),fRate25m() #Modifiers(mass_s, CycB)
	Degradation_of_Plk1: Plk1() -> 0  k_10
	grow_of_mass: 0  <-> mass() fRate27(),fRate27m()
end reaction rules
end model
