###
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/24885656']
#@BQB_IS:['http://identifiers.org/biomodels.db/MODEL1403250000']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0006635']
#@BQB_OCCURS_IN:['http://identifiers.org/bto/BTO:0000759']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/10116']
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1403250000', 'http://identifiers.org/biomodels.db/BIOMD0000000835']
#@creatorEmail:'msharifshohan@ebi.ac.uk'
#@creatorName:'Sharif Shohan Mohammad Umer'
#@notes:'This is an atomized translation of an SBML model created on 14/08/2021. The original model has 55 molecules and 37 reactions. The translated model has 11 molecules and 76 rules'
###
begin model
begin parameters
	Vfcact 0.42
	Vrcact 0.42
	KmcactCarMAT 130.0
	KmcactCarCYT 130.0
	KicactCarCYT 200.0
	Keqcact 1.0
	Vcpt2 0.391
	Kmcpt2C16AcylCarMAT 51.0
	Kmcpt2C14AcylCarMAT 51.0
	Kmcpt2C12AcylCarMAT 51.0
	Kmcpt2C10AcylCarMAT 51.0
	Kmcpt2C8AcylCarMAT 51.0
	Kmcpt2C6AcylCarMAT 51.0
	Kmcpt2C4AcylCarMAT 51.0
	Kmcpt2CoAMAT 30.0
	Kmcpt2C16AcylCoAMAT 38.0
	Kmcpt2C14AcylCoAMAT 38.0
	Kmcpt2C12AcylCoAMAT 38.0
	Kmcpt2C10AcylCoAMAT 38.0
	Kmcpt2C8AcylCoAMAT 38.0
	Kmcpt2C6AcylCoAMAT 1000.0
	Kmcpt2C4AcylCoAMAT 1000000.0
	Kmcpt2CarMAT 350.0
	Keqcpt2 2.22
	Vvlcad 0.008
	KmvlcadC16AcylCoAMAT 6.5
	KmvlcadC14AcylCoAMAT 4.0
	KmvlcadC12AcylCoAMAT 2.7
	KmvlcadFAD 0.12
	KmvlcadC16EnoylCoAMAT 1.08
	KmvlcadC14EnoylCoAMAT 1.08
	KmvlcadC12EnoylCoAMAT 1.08
	KmvlcadFADH 24.2
	Keqvlcad 6.0
	Vlcad 0.01
	KmlcadC16AcylCoAMAT 2.5
	KmlcadC14AcylCoAMAT 7.4
	KmlcadC12AcylCoAMAT 9.0
	KmlcadC10AcylCoAMAT 24.3
	KmlcadC8AcylCoAMAT 123.0
	KmlcadFAD 0.12
	KmlcadC16EnoylCoAMAT 1.08
	KmlcadC14EnoylCoAMAT 1.08
	KmlcadC12EnoylCoAMAT 1.08
	KmlcadC10EnoylCoAMAT 1.08
	KmlcadC8EnoylCoAMAT 1.08
	KmlcadFADH 24.2
	Keqlcad 6.0
	Vmcad 0.081
	KmmcadC12AcylCoAMAT 5.7
	KmmcadC10AcylCoAMAT 5.4
	KmmcadC8AcylCoAMAT 4.0
	KmmcadC6AcylCoAMAT 9.4
	KmmcadC4AcylCoAMAT 135.0
	KmmcadFAD 0.12
	KmmcadC12EnoylCoAMAT 1.08
	KmmcadC10EnoylCoAMAT 1.08
	KmmcadC8EnoylCoAMAT 1.08
	KmmcadC6EnoylCoAMAT 1.08
	KmmcadC4EnoylCoAMAT 1.08
	KmmcadFADH 24.2
	Keqmcad 6.0
	Vscad 0.081
	KmscadC6AcylCoAMAT 285.0
	KmscadC4AcylCoAMAT 10.7
	KmscadFAD 0.12
	KmscadC6EnoylCoAMAT 1.08
	KmscadC4EnoylCoAMAT 1.08
	KmscadFADH 24.2
	Keqscad 6.0
	Vcrot 3.6
	KmcrotC16EnoylCoAMAT 150.0
	KmcrotC14EnoylCoAMAT 100.0
	KmcrotC12EnoylCoAMAT 25.0
	KmcrotC10EnoylCoAMAT 25.0
	KmcrotC8EnoylCoAMAT 25.0
	KmcrotC6EnoylCoAMAT 25.0
	KmcrotC4EnoylCoAMAT 40.0
	KmcrotC16HydroxyacylCoAMAT 45.0
	KmcrotC14HydroxyacylCoAMAT 45.0
	KmcrotC12HydroxyacylCoAMAT 45.0
	KmcrotC10HydroxyacylCoAMAT 45.0
	KmcrotC8HydroxyacylCoAMAT 45.0
	KmcrotC6HydroxyacylCoAMAT 45.0
	KmcrotC4HydroxyacylCoAMAT 45.0
	KicrotC4AcetoacylCoA 1.6
	Keqcrot 3.13
	Vmschad 1.0
	KmmschadC16HydroxyacylCoAMAT 1.5
	KmmschadC14HydroxyacylCoAMAT 1.8
	KmmschadC12HydroxyacylCoAMAT 3.7
	KmmschadC10HydroxyacylCoAMAT 8.8
	KmmschadC8HydroxyacylCoAMAT 16.3
	KmmschadC6HydroxyacylCoAMAT 28.6
	KmmschadC4HydroxyacylCoAMAT 69.9
	KmmschadNADMAT 58.5
	KmmschadC16KetoacylCoAMAT 1.4
	KmmschadC14KetoacylCoAMAT 1.4
	KmmschadC12KetoacylCoAMAT 1.6
	KmmschadC10KetoacylCoAMAT 2.3
	KmmschadC8KetoacylCoAMAT 4.1
	KmmschadC6KetoacylCoAMAT 5.8
	KmmschadC4AcetoacylCoAMAT 16.9
	KmmschadNADHMAT 5.4
	Keqmschad 0.000217
	Vmckat 0.377
	KmmckatC16KetoacylCoAMAT 1.1
	KmmckatC14KetoacylCoAMAT 1.2
	KmmckatC12KetoacylCoAMAT 1.3
	KmmckatC10KetoacylCoAMAT 2.1
	KmmckatC8KetoacylCoAMAT 3.2
	KmmckatC6KetoacylCoAMAT 6.7
	KmmckatC4AcetoacylCoAMAT 12.4
	KmmckatCoAMAT 26.6
	KmmckatC14AcylCoAMAT 13.83
	KmmckatC16AcylCoAMAT 13.83
	KmmckatC12AcylCoAMAT 13.83
	KmmckatC10AcylCoAMAT 13.83
	KmmckatC8AcylCoAMAT 13.83
	KmmckatC6AcylCoAMAT 13.83
	KmmckatC4AcylCoAMAT 13.83
	KmmckatAcetylCoAMAT 30.0
	Keqmckat 1051.0
	Vmtp 2.84
	KmmtpC16EnoylCoAMAT 25.0
	KmmtpC14EnoylCoAMAT 25.0
	KmmtpC12EnoylCoAMAT 25.0
	KmmtpC10EnoylCoAMAT 25.0
	KmmtpC8EnoylCoAMAT 25.0
	KmmtpNADMAT 60.0
	KmmtpCoAMAT 30.0
	KmmtpC14AcylCoAMAT 13.83
	KmmtpC16AcylCoAMAT 13.83
	KmmtpC12AcylCoAMAT 13.83
	KmmtpC10AcylCoAMAT 13.83
	KmmtpC8AcylCoAMAT 13.83
	KmmtpC6AcylCoAMAT 13.83
	KmmtpNADHMAT 50.0
	KmmtpAcetylCoAMAT 30.0
	Keqmtp 0.71
	FADtMAT_VMAT 834649200000.0 #original 0.77substance/L
	FADtMAT 834649200000.0 #original 0.77substance/L
	NADtMAT_VMAT 270990000000000.0 #original 250.0substance/L
	NADtMAT 270990000000000.0 #original 250.0substance/L
	r1_Keqcpt1 0.450000
	r1_Kicpt1MalCoACYT 9.100000
	r1_Kmcpt1C16AcylCarCYT 136.000000
	r1_Kmcpt1C16AcylCoACYT 13.800000
	r1_Kmcpt1CarCYT 125.000000
	r1_Kmcpt1CoACYT 40.700000
	r1_Vcpt1 0.012000
	r1_ncpt1 2.479900
	r1_sfcpt1C16 1.000000
	r2_KicactC16AcylCarCYT 56.000000
	r2_KmcactC16AcylCarCYT 15.000000
	r2_KmcactC16AcylCarMAT 15.000000
	r3_KicactC14AcylCarCYT 56.000000
	r3_KmcactC14AcylCarCYT 15.000000
	r3_KmcactC14AcylCarMAT 15.000000
	r4_KicactC12AcylCarCYT 56.000000
	r4_KmcactC12AcylCarCYT 15.000000
	r4_KmcactC12AcylCarMAT 15.000000
	r5_KicactC10AcylCarCYT 56.000000
	r5_KmcactC10AcylCarCYT 15.000000
	r5_KmcactC10AcylCarMAT 15.000000
	r6_KicactC8AcylCarCYT 56.000000
	r6_KmcactC8AcylCarCYT 15.000000
	r6_KmcactC8AcylCarMAT 15.000000
	r7_KicactC6AcylCarCYT 56.000000
	r7_KmcactC6AcylCarCYT 15.000000
	r7_KmcactC6AcylCarMAT 15.000000
	r8_KicactC4AcylCarCYT 56.000000
	r8_KmcactC4AcylCarCYT 15.000000
	r8_KmcactC4AcylCarMAT 15.000000
	r9_sfcpt2C16 0.850000
	r10_sfcpt2C14 1.000000
	r11_sfcpt2C12 0.950000
	r12_sfcpt2C10 0.950000
	r13_sfcpt2C8 0.350000
	r14_sfcpt2C6 0.150000
	r15_sfcpt2C4 0.010000
	r16_sfvlcadC16 1.000000
	r17_sfvlcadC14 0.420000
	r18_sfvlcadC12 0.110000
	r19_sflcadC16 0.900000
	r20_sflcadC14 1.000000
	r21_sflcadC12 0.900000
	r22_sflcadC10 0.750000
	r23_sfmcadC12 0.380000
	r24_sfmcadC10 0.800000
	r25_sfmcadC8 0.870000
	r26_sfmcadC6 1.000000
	r27_sfscadC4 1.000000
	r28_sfmckatC6 1.000000
	r29_sfmckatC4 0.490000
	r30_sfmtpC16 1.000000
	r31_sfmtpC14 0.900000
	r32_sfmtpC12 0.810000
	r33_sfmtpC10 0.730000
	r34_sfmtpC8 0.340000
	r35_K1acesink 30.000000
	r35_Ksacesink 6000000.000000
	r36_sfcrotC6 0.830000
	r36_sfmschadC6 1.000000
	r37_sfcrotC4 1.000000
	r37_sfmschadC4 0.670000
end parameters
begin compartments
	#volume units: L
	VCYT 3 0.01
	VMAT 3 1.8e-06
end compartments
begin molecule types
	FADHMAT()
	C6AcylC(oamat~OAMAT~0)
	C14AcylC(oamat~OAMAT~0)
	C10AcylC(oamat~OAMAT~0)
	CoA(AcetylCoAMAT~AcetylCoAMAT~0,C10EnoylCoAMAT~C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~C10KetoacylCoAMAT~0,C12EnoylCoAMAT~C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~C12KetoacylCoAMAT~0,C14EnoylCoAMAT~C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~C14KetoacylCoAMAT~0,C16AcylCoACYT~C16AcylCoACYT~0,C16EnoylCoAMAT~C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~C16KetoacylCoAMAT~0,C4EnoylCoAMAT~C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~C8KetoacylCoAMAT~0,CoAMATt~CoAMATt~0,MalCoACYT~MalCoACYT~0,c4acylc,coa,cyt~CYT~0,mat~MAT~0)
	Car(C10AcylCar~C10AcylCar~0,C12AcylCar~C12AcylCar~0,C14AcylCar~C14AcylCar~0,C16AcylCar~C16AcylCar~0,C4AcylCar~C4AcylCar~0,C6AcylCar~C6AcylCar~0,C8AcylCar~C8AcylCar~0,cyt~CYT~0,mat~MAT~0)
	C12AcylC(oamat~OAMAT~0)
	NAD(hmat~HMAT~0)
	C4AcylC(coa,oamat~OAMAT~0)
	C16AcylC(oamat~OAMAT~0)
	C8AcylC(oamat~OAMAT~0)
end molecule types
begin seed species
	@VCYT:Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~C16AcylCar,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~CYT,mat~0) 1029762000000000.1 # (0.171 * 1e-06)mol/L * 6.022e23/mol *0.01L #C16AcylCarCYT #C16AcylCarCYT
	@VCYT:Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~C14AcylCar,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~CYT,mat~0) 138506000000000.0 #original 0.023substance/L #C14AcylCarCYT #C14AcylCarCYT
	@VCYT:Car(C10AcylCar~0,C12AcylCar~C12AcylCar,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~CYT,mat~0) 662420000000000.0 #original 0.11substance/L #C12AcylCarCYT #C12AcylCarCYT
	@VCYT:Car(C10AcylCar~C10AcylCar,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~CYT,mat~0) 114418000000000.0 #original 0.019substance/L #C10AcylCarCYT #C10AcylCarCYT
	@VCYT:Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~C8AcylCar,cyt~CYT,mat~0) 313144000000000.0 #original 0.052substance/L #C8AcylCarCYT #C8AcylCarCYT
	@VCYT:Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~C6AcylCar,C8AcylCar~0,cyt~CYT,mat~0) 102374000000000.0 #original 0.017substance/L #C6AcylCarCYT #C6AcylCarCYT
	@VCYT:Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~C4AcylCar,C6AcylCar~0,C8AcylCar~0,cyt~CYT,mat~0) 48176000000000.01 #original 0.008substance/L #C4AcylCarCYT #C4AcylCarCYT
	@VCYT:CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~C16AcylCoACYT,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0) 26.8*2.71828**(-0.18*time()) #original 26.8substance/L #C16AcylCoACYT #C16AcylCoACYT
	@VCYT:$Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~CYT,mat~0) 2.4088e+18 #original 400.0substance/L #CarCYT #CarCYT
	@VCYT:$CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~CYT,mat~0) 8.4308e+17 #original 140.0substance/L #CoACYT #CoACYT
	@VMAT:CoA(AcetylCoAMAT~AcetylCoAMAT,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0) 32518800000000.0 #original 30.0substance/L #AcetylCoAMAT #AcetylCoAMAT
	@VMAT:$FADHMAT() 498621600000.0 #original 0.46substance/L #FADHMAT #FADHMAT
	@VMAT:$NAD(hmat~HMAT) 17343360000000.0 #original 16.0substance/L #NADHMAT #NADHMAT
	@VMAT:CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~MAT) -32518800000000.0 #original 4970.0substance/L #CoAMAT #CoAMAT
	@VMAT:$Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT) 1029762000000000.0 #original 950.0substance/L #CarMAT #CarMAT
	@VMAT:$CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~CoAMATt,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0) 5419800000000000.0 #original 5000.0substance/L #CoAMATt #CoAMATt
	@VMAT:$NAD(hmat~0) 253646640000000.0 #original 234.0substance/L #NAD #species_1
end seed species
begin observables
	Species C16AcylCarCYT_VCYT @VCYT:Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~C16AcylCar,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~CYT,mat~0) #C16AcylCarCYT
	Species C14AcylCarCYT_VCYT @VCYT:Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~C14AcylCar,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~CYT,mat~0) #C14AcylCarCYT
	Species C12AcylCarCYT_VCYT @VCYT:Car(C10AcylCar~0,C12AcylCar~C12AcylCar,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~CYT,mat~0) #C12AcylCarCYT
	Species C10AcylCarCYT_VCYT @VCYT:Car(C10AcylCar~C10AcylCar,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~CYT,mat~0) #C10AcylCarCYT
	Species C8AcylCarCYT_VCYT @VCYT:Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~C8AcylCar,cyt~CYT,mat~0) #C8AcylCarCYT
	Species C6AcylCarCYT_VCYT @VCYT:Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~C6AcylCar,C8AcylCar~0,cyt~CYT,mat~0) #C6AcylCarCYT
	Species C4AcylCarCYT_VCYT @VCYT:Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~C4AcylCar,C6AcylCar~0,C8AcylCar~0,cyt~CYT,mat~0) #C4AcylCarCYT
	Species C16AcylCoACYT_VCYT @VCYT:CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~C16AcylCoACYT,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0) #C16AcylCoACYT
	Species CarCYT_VCYT @VCYT:Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~CYT,mat~0) #CarCYT
	Species CoACYT_VCYT @VCYT:CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~CYT,mat~0) #CoACYT
	Species MalCoACYT_VCYT @VCYT:CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~MalCoACYT,c4acylc,coa,cyt~0,mat~0) #MalCoACYT
	Species C16AcylCarMAT_VMAT @VMAT:Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~C16AcylCar,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT) #C16AcylCarMAT
	Species C16AcylCoAMAT_VMAT @VMAT:C16AcylC(oamat~OAMAT) #C16AcylCoAMAT
	Species C16EnoylCoAMAT_VMAT @VMAT:CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~C16EnoylCoAMAT,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0) #C16EnoylCoAMAT
	Species C16HydroxyacylCoAMAT_VMAT @VMAT:CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~C16HydroxyacylCoAMAT,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0) #C16HydroxyacylCoAMAT
	Species C16KetoacylCoAMAT_VMAT @VMAT:CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~C16KetoacylCoAMAT,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0) #C16KetoacylCoAMAT
	Species C14AcylCarMAT_VMAT @VMAT:Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~C14AcylCar,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT) #C14AcylCarMAT
	Species C14AcylCoAMAT_VMAT @VMAT:C14AcylC(oamat~OAMAT) #C14AcylCoAMAT
	Species C14EnoylCoAMAT_VMAT @VMAT:CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~C14EnoylCoAMAT,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0) #C14EnoylCoAMAT
	Species C14HydroxyacylCoAMAT_VMAT @VMAT:CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~C14HydroxyacylCoAMAT,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0) #C14HydroxyacylCoAMAT
	Species C14KetoacylCoAMAT_VMAT @VMAT:CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~C14KetoacylCoAMAT,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0) #C14KetoacylCoAMAT
	Species C12AcylCarMAT_VMAT @VMAT:Car(C10AcylCar~0,C12AcylCar~C12AcylCar,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT) #C12AcylCarMAT
	Species C12AcylCoAMAT_VMAT @VMAT:C12AcylC(oamat~OAMAT) #C12AcylCoAMAT
	Species C12EnoylCoAMAT_VMAT @VMAT:CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~C12EnoylCoAMAT,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0) #C12EnoylCoAMAT
	Species C12HydroxyacylCoAMAT_VMAT @VMAT:CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~C12HydroxyacylCoAMAT,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0) #C12HydroxyacylCoAMAT
	Species C12KetoacylCoAMAT_VMAT @VMAT:CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~C12KetoacylCoAMAT,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0) #C12KetoacylCoAMAT
	Species C10AcylCarMAT_VMAT @VMAT:Car(C10AcylCar~C10AcylCar,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT) #C10AcylCarMAT
	Species C10AcylCoAMAT_VMAT @VMAT:C10AcylC(oamat~OAMAT) #C10AcylCoAMAT
	Species C10EnoylCoAMAT_VMAT @VMAT:CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~C10EnoylCoAMAT,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0) #C10EnoylCoAMAT
	Species C10HydroxyacylCoAMAT_VMAT @VMAT:CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~C10HydroxyacylCoAMAT,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0) #C10HydroxyacylCoAMAT
	Species C10KetoacylCoAMAT_VMAT @VMAT:CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~C10KetoacylCoAMAT,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0) #C10KetoacylCoAMAT
	Species C8AcylCarMAT_VMAT @VMAT:Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~C8AcylCar,cyt~0,mat~MAT) #C8AcylCarMAT
	Species C8AcylCoAMAT_VMAT @VMAT:C8AcylC(oamat~OAMAT) #C8AcylCoAMAT
	Species C8EnoylCoAMAT_VMAT @VMAT:CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~C8EnoylCoAMAT,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0) #C8EnoylCoAMAT
	Species C8HydroxyacylCoAMAT_VMAT @VMAT:CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~C8HydroxyacylCoAMAT,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0) #C8HydroxyacylCoAMAT
	Species C8KetoacylCoAMAT_VMAT @VMAT:CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~C8KetoacylCoAMAT,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0) #C8KetoacylCoAMAT
	Species C6AcylCarMAT_VMAT @VMAT:Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~C6AcylCar,C8AcylCar~0,cyt~0,mat~MAT) #C6AcylCarMAT
	Species C6AcylCoAMAT_VMAT @VMAT:C6AcylC(oamat~OAMAT) #C6AcylCoAMAT
	Species C6EnoylCoAMAT_VMAT @VMAT:CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~C6EnoylCoAMAT,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0) #C6EnoylCoAMAT
	Species C6HydroxyacylCoAMAT_VMAT @VMAT:CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~C6HydroxyacylCoAMAT,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0) #C6HydroxyacylCoAMAT
	Species C6KetoacylCoAMAT_VMAT @VMAT:CoA(AcetylCoAMAT~AcetylCoAMAT,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc!863,coa,cyt~0,mat~0).C4AcylC(coa!863,oamat~OAMAT) #C6KetoacylCoAMAT
	Species C4AcylCarMAT_VMAT @VMAT:Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~C4AcylCar,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT) #C4AcylCarMAT
	Species C4AcylCoAMAT_VMAT @VMAT:C4AcylC(coa,oamat~OAMAT) #C4AcylCoAMAT
	Species C4EnoylCoAMAT_VMAT @VMAT:CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~C4EnoylCoAMAT,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0) #C4EnoylCoAMAT
	Species C4HydroxyacylCoAMAT_VMAT @VMAT:CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~C4HydroxyacylCoAMAT,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0) #C4HydroxyacylCoAMAT
	Species C4AcetoacylCoAMAT_VMAT @VMAT:CoA(AcetylCoAMAT~AcetylCoAMAT,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa!864,cyt~0,mat~0).CoA(AcetylCoAMAT~AcetylCoAMAT,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa!864,cyt~0,mat~0) #C4AcetoacylCoAMAT
	Species AcetylCoAMAT_VMAT @VMAT:CoA(AcetylCoAMAT~AcetylCoAMAT,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0) #AcetylCoAMAT
	Species FADHMAT_VMAT @VMAT:FADHMAT() #FADHMAT
	Species NADHMAT_VMAT @VMAT:NAD(hmat~HMAT) #NADHMAT
	Species CoAMAT_VMAT @VMAT:CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~MAT) #CoAMAT
	Species CarMAT_VMAT @VMAT:Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT) #CarMAT
	Species CoAMATt_VMAT @VMAT:CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~CoAMATt,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0) #CoAMATt
	Species NAD_VMAT @VMAT:NAD(hmat~0) #NAD
end observables
begin functions
	CoAMAT_ar() = -AcetylCoAMAT_VMAT - C10AcylCoAMAT_VMAT - C10EnoylCoAMAT_VMAT - C10HydroxyacylCoAMAT_VMAT - C10KetoacylCoAMAT_VMAT - C12AcylCoAMAT_VMAT - C12EnoylCoAMAT_VMAT - C12HydroxyacylCoAMAT_VMAT - C12KetoacylCoAMAT_VMAT - C14AcylCoAMAT_VMAT - C14EnoylCoAMAT_VMAT - C14HydroxyacylCoAMAT_VMAT - C14KetoacylCoAMAT_VMAT - C16AcylCoAMAT_VMAT - C16EnoylCoAMAT_VMAT - C16HydroxyacylCoAMAT_VMAT - C16KetoacylCoAMAT_VMAT - C4AcetoacylCoAMAT_VMAT - C4AcylCoAMAT_VMAT - C4EnoylCoAMAT_VMAT - C4HydroxyacylCoAMAT_VMAT - C6AcylCoAMAT_VMAT - C6EnoylCoAMAT_VMAT - C6HydroxyacylCoAMAT_VMAT - C6KetoacylCoAMAT_VMAT - C8AcylCoAMAT_VMAT - C8EnoylCoAMAT_VMAT - C8HydroxyacylCoAMAT_VMAT - C8KetoacylCoAMAT_VMAT + CoAMATt_VMAT
	C16AcylCoACYT_ar() = 26.8*2.71828^(-0.18*time())
	fRate0() = 66.4224*C16AcylCoACYT_VCYT*CarCYT_VCYT/(1725.0*C16AcylCarCYT_VCYT*CoACYT_VCYT + 561.66*C16AcylCarCYT_VCYT*(CarCYT_VCYT + 125.0) + 5535.2*C16AcylCoACYT_VCYT*CarCYT_VCYT + 691900.0*C16AcylCoACYT_VCYT + 319.658056892516*CarCYT_VCYT*MalCoACYT_VCYT^2.4799 + 76385.76*CarCYT_VCYT + 17000.0*CoACYT_VCYT*(C16AcylCoACYT_VCYT + 0.0577500464107016*MalCoACYT_VCYT^2.4799 + 13.8) + 39957.2571115645*MalCoACYT_VCYT^2.4799 + 9548220.0)
	fRate0m() = 66.4224*CoACYT_VCYT/(776.25*C16AcylCarCYT_VCYT*CoACYT_VCYT + 252.747*C16AcylCarCYT_VCYT*(CarCYT_VCYT + 125.0) + 2490.84*C16AcylCoACYT_VCYT*CarCYT_VCYT + 311355.0*C16AcylCoACYT_VCYT + 143.846125601632*CarCYT_VCYT*MalCoACYT_VCYT^2.4799 + 34373.592*CarCYT_VCYT + 7650.0*CoACYT_VCYT*(C16AcylCoACYT_VCYT + 0.0577500464107016*MalCoACYT_VCYT^2.4799 + 13.8) + 17980.765700204*MalCoACYT_VCYT^2.4799 + 4296699.0)
	fRate1() = 56.0*CarMAT_VMAT*Keqcact*KicactCarCYT*Vfcact*Vrcact/(C16AcylCarCYT_VCYT*C16AcylCarMAT_VMAT*KicactCarCYT*KmcactCarCYT*Vfcact + 840.0*CarCYT_VCYT*CarMAT_VMAT*Keqcact*Vrcact + 56.0*Keqcact*KicactCarCYT*Vrcact*(C16AcylCarCYT_VCYT*CarMAT_VMAT + C16AcylCarCYT_VCYT*KmcactCarMAT + 15.0*CarMAT_VMAT) + 56.0*KicactCarCYT*Vfcact*(C16AcylCarMAT_VMAT*CarCYT_VCYT + C16AcylCarMAT_VMAT*KmcactCarCYT + 15.0*CarCYT_VCYT))
	fRate1m() = 56.0*CarCYT_VCYT*KicactCarCYT*Vfcact*Vrcact/(C16AcylCarCYT_VCYT*C16AcylCarMAT_VMAT*KicactCarCYT*KmcactCarCYT*Vfcact + 840.0*CarCYT_VCYT*CarMAT_VMAT*Keqcact*Vrcact + 56.0*Keqcact*KicactCarCYT*Vrcact*(C16AcylCarCYT_VCYT*CarMAT_VMAT + C16AcylCarCYT_VCYT*KmcactCarMAT + 15.0*CarMAT_VMAT) + 56.0*KicactCarCYT*Vfcact*(C16AcylCarMAT_VMAT*CarCYT_VCYT + C16AcylCarMAT_VMAT*KmcactCarCYT + 15.0*CarCYT_VCYT))
	fRate2() = 56.0*CarMAT_VMAT*Keqcact*KicactCarCYT*Vfcact*Vrcact/(C14AcylCarCYT_VCYT*C14AcylCarMAT_VMAT*KicactCarCYT*KmcactCarCYT*Vfcact + 840.0*CarCYT_VCYT*CarMAT_VMAT*Keqcact*Vrcact + 56.0*Keqcact*KicactCarCYT*Vrcact*(C14AcylCarCYT_VCYT*CarMAT_VMAT + C14AcylCarCYT_VCYT*KmcactCarMAT + 15.0*CarMAT_VMAT) + 56.0*KicactCarCYT*Vfcact*(C14AcylCarMAT_VMAT*CarCYT_VCYT + C14AcylCarMAT_VMAT*KmcactCarCYT + 15.0*CarCYT_VCYT))
	fRate2m() = 56.0*CarCYT_VCYT*KicactCarCYT*Vfcact*Vrcact/(C14AcylCarCYT_VCYT*C14AcylCarMAT_VMAT*KicactCarCYT*KmcactCarCYT*Vfcact + 840.0*CarCYT_VCYT*CarMAT_VMAT*Keqcact*Vrcact + 56.0*Keqcact*KicactCarCYT*Vrcact*(C14AcylCarCYT_VCYT*CarMAT_VMAT + C14AcylCarCYT_VCYT*KmcactCarMAT + 15.0*CarMAT_VMAT) + 56.0*KicactCarCYT*Vfcact*(C14AcylCarMAT_VMAT*CarCYT_VCYT + C14AcylCarMAT_VMAT*KmcactCarCYT + 15.0*CarCYT_VCYT))
	fRate3() = 56.0*CarMAT_VMAT*Keqcact*KicactCarCYT*Vfcact*Vrcact/(C12AcylCarCYT_VCYT*C12AcylCarMAT_VMAT*KicactCarCYT*KmcactCarCYT*Vfcact + 840.0*CarCYT_VCYT*CarMAT_VMAT*Keqcact*Vrcact + 56.0*Keqcact*KicactCarCYT*Vrcact*(C12AcylCarCYT_VCYT*CarMAT_VMAT + C12AcylCarCYT_VCYT*KmcactCarMAT + 15.0*CarMAT_VMAT) + 56.0*KicactCarCYT*Vfcact*(C12AcylCarMAT_VMAT*CarCYT_VCYT + C12AcylCarMAT_VMAT*KmcactCarCYT + 15.0*CarCYT_VCYT))
	fRate3m() = 56.0*CarCYT_VCYT*KicactCarCYT*Vfcact*Vrcact/(C12AcylCarCYT_VCYT*C12AcylCarMAT_VMAT*KicactCarCYT*KmcactCarCYT*Vfcact + 840.0*CarCYT_VCYT*CarMAT_VMAT*Keqcact*Vrcact + 56.0*Keqcact*KicactCarCYT*Vrcact*(C12AcylCarCYT_VCYT*CarMAT_VMAT + C12AcylCarCYT_VCYT*KmcactCarMAT + 15.0*CarMAT_VMAT) + 56.0*KicactCarCYT*Vfcact*(C12AcylCarMAT_VMAT*CarCYT_VCYT + C12AcylCarMAT_VMAT*KmcactCarCYT + 15.0*CarCYT_VCYT))
	fRate4() = 56.0*CarMAT_VMAT*Keqcact*KicactCarCYT*Vfcact*Vrcact/(C10AcylCarCYT_VCYT*C10AcylCarMAT_VMAT*KicactCarCYT*KmcactCarCYT*Vfcact + 840.0*CarCYT_VCYT*CarMAT_VMAT*Keqcact*Vrcact + 56.0*Keqcact*KicactCarCYT*Vrcact*(C10AcylCarCYT_VCYT*CarMAT_VMAT + C10AcylCarCYT_VCYT*KmcactCarMAT + 15.0*CarMAT_VMAT) + 56.0*KicactCarCYT*Vfcact*(C10AcylCarMAT_VMAT*CarCYT_VCYT + C10AcylCarMAT_VMAT*KmcactCarCYT + 15.0*CarCYT_VCYT))
	fRate4m() = 56.0*CarCYT_VCYT*KicactCarCYT*Vfcact*Vrcact/(C10AcylCarCYT_VCYT*C10AcylCarMAT_VMAT*KicactCarCYT*KmcactCarCYT*Vfcact + 840.0*CarCYT_VCYT*CarMAT_VMAT*Keqcact*Vrcact + 56.0*Keqcact*KicactCarCYT*Vrcact*(C10AcylCarCYT_VCYT*CarMAT_VMAT + C10AcylCarCYT_VCYT*KmcactCarMAT + 15.0*CarMAT_VMAT) + 56.0*KicactCarCYT*Vfcact*(C10AcylCarMAT_VMAT*CarCYT_VCYT + C10AcylCarMAT_VMAT*KmcactCarCYT + 15.0*CarCYT_VCYT))
	fRate5() = 56.0*CarMAT_VMAT*Keqcact*KicactCarCYT*Vfcact*Vrcact/(C8AcylCarCYT_VCYT*C8AcylCarMAT_VMAT*KicactCarCYT*KmcactCarCYT*Vfcact + 840.0*CarCYT_VCYT*CarMAT_VMAT*Keqcact*Vrcact + 56.0*Keqcact*KicactCarCYT*Vrcact*(C8AcylCarCYT_VCYT*CarMAT_VMAT + C8AcylCarCYT_VCYT*KmcactCarMAT + 15.0*CarMAT_VMAT) + 56.0*KicactCarCYT*Vfcact*(C8AcylCarMAT_VMAT*CarCYT_VCYT + C8AcylCarMAT_VMAT*KmcactCarCYT + 15.0*CarCYT_VCYT))
	fRate5m() = 56.0*CarCYT_VCYT*KicactCarCYT*Vfcact*Vrcact/(C8AcylCarCYT_VCYT*C8AcylCarMAT_VMAT*KicactCarCYT*KmcactCarCYT*Vfcact + 840.0*CarCYT_VCYT*CarMAT_VMAT*Keqcact*Vrcact + 56.0*Keqcact*KicactCarCYT*Vrcact*(C8AcylCarCYT_VCYT*CarMAT_VMAT + C8AcylCarCYT_VCYT*KmcactCarMAT + 15.0*CarMAT_VMAT) + 56.0*KicactCarCYT*Vfcact*(C8AcylCarMAT_VMAT*CarCYT_VCYT + C8AcylCarMAT_VMAT*KmcactCarCYT + 15.0*CarCYT_VCYT))
	fRate6() = 56.0*CarMAT_VMAT*Keqcact*KicactCarCYT*Vfcact*Vrcact/(C6AcylCarCYT_VCYT*C6AcylCarMAT_VMAT*KicactCarCYT*KmcactCarCYT*Vfcact + 840.0*CarCYT_VCYT*CarMAT_VMAT*Keqcact*Vrcact + 56.0*Keqcact*KicactCarCYT*Vrcact*(C6AcylCarCYT_VCYT*CarMAT_VMAT + C6AcylCarCYT_VCYT*KmcactCarMAT + 15.0*CarMAT_VMAT) + 56.0*KicactCarCYT*Vfcact*(C6AcylCarMAT_VMAT*CarCYT_VCYT + C6AcylCarMAT_VMAT*KmcactCarCYT + 15.0*CarCYT_VCYT))
	fRate6m() = 56.0*CarCYT_VCYT*KicactCarCYT*Vfcact*Vrcact/(C6AcylCarCYT_VCYT*C6AcylCarMAT_VMAT*KicactCarCYT*KmcactCarCYT*Vfcact + 840.0*CarCYT_VCYT*CarMAT_VMAT*Keqcact*Vrcact + 56.0*Keqcact*KicactCarCYT*Vrcact*(C6AcylCarCYT_VCYT*CarMAT_VMAT + C6AcylCarCYT_VCYT*KmcactCarMAT + 15.0*CarMAT_VMAT) + 56.0*KicactCarCYT*Vfcact*(C6AcylCarMAT_VMAT*CarCYT_VCYT + C6AcylCarMAT_VMAT*KmcactCarCYT + 15.0*CarCYT_VCYT))
	fRate7() = 56.0*CarMAT_VMAT*Keqcact*KicactCarCYT*Vfcact*Vrcact/(C4AcylCarCYT_VCYT*C4AcylCarMAT_VMAT*KicactCarCYT*KmcactCarCYT*Vfcact + 840.0*CarCYT_VCYT*CarMAT_VMAT*Keqcact*Vrcact + 56.0*Keqcact*KicactCarCYT*Vrcact*(C4AcylCarCYT_VCYT*CarMAT_VMAT + C4AcylCarCYT_VCYT*KmcactCarMAT + 15.0*CarMAT_VMAT) + 56.0*KicactCarCYT*Vfcact*(C4AcylCarMAT_VMAT*CarCYT_VCYT + C4AcylCarMAT_VMAT*KmcactCarCYT + 15.0*CarCYT_VCYT))
	fRate7m() = 56.0*CarCYT_VCYT*KicactCarCYT*Vfcact*Vrcact/(C4AcylCarCYT_VCYT*C4AcylCarMAT_VMAT*KicactCarCYT*KmcactCarCYT*Vfcact + 840.0*CarCYT_VCYT*CarMAT_VMAT*Keqcact*Vrcact + 56.0*Keqcact*KicactCarCYT*Vrcact*(C4AcylCarCYT_VCYT*CarMAT_VMAT + C4AcylCarCYT_VCYT*KmcactCarMAT + 15.0*CarMAT_VMAT) + 56.0*KicactCarCYT*Vfcact*(C4AcylCarMAT_VMAT*CarCYT_VCYT + C4AcylCarMAT_VMAT*KmcactCarCYT + 15.0*CarCYT_VCYT))
	fRate8() = 0.85*CoAMAT_VMAT*Vcpt2/(C10AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCarMAT*Kmcpt2CarMAT) + C10AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C16AcylCarMAT/Kmcpt2C10AcylCarMAT + C10AcylCarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCarMAT + C10AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCoAMAT*Kmcpt2CarMAT) + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C16AcylCarMAT/Kmcpt2C10AcylCoAMAT + C10AcylCoAMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCoAMAT + C12AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCarMAT*Kmcpt2CarMAT) + C12AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C16AcylCarMAT/Kmcpt2C12AcylCarMAT + C12AcylCarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCarMAT + C12AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCoAMAT*Kmcpt2CarMAT) + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C16AcylCarMAT/Kmcpt2C12AcylCoAMAT + C12AcylCoAMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCoAMAT + C14AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCarMAT*Kmcpt2CarMAT) + C14AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C16AcylCarMAT/Kmcpt2C14AcylCarMAT + C14AcylCarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCarMAT + C14AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCoAMAT*Kmcpt2CarMAT) + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C16AcylCarMAT/Kmcpt2C14AcylCoAMAT + C14AcylCoAMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCoAMAT + C16AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + C16AcylCarMAT_VMAT*CoAMAT_VMAT + C16AcylCarMAT_VMAT*Kmcpt2CoAMAT + C16AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCoAMAT*Kmcpt2CarMAT) + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C16AcylCarMAT/Kmcpt2C16AcylCoAMAT + C16AcylCoAMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCoAMAT + C4AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCarMAT*Kmcpt2CarMAT) + C4AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C16AcylCarMAT/Kmcpt2C4AcylCarMAT + C4AcylCarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCarMAT + C4AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCoAMAT*Kmcpt2CarMAT) + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C16AcylCarMAT/Kmcpt2C4AcylCoAMAT + C4AcylCoAMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCoAMAT + C6AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCarMAT*Kmcpt2CarMAT) + C6AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C16AcylCarMAT/Kmcpt2C6AcylCarMAT + C6AcylCarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCarMAT + C6AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCoAMAT*Kmcpt2CarMAT) + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C16AcylCarMAT/Kmcpt2C6AcylCoAMAT + C6AcylCoAMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCoAMAT + C8AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCarMAT*Kmcpt2CarMAT) + C8AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C16AcylCarMAT/Kmcpt2C8AcylCarMAT + C8AcylCarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCarMAT + C8AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCoAMAT*Kmcpt2CarMAT) + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C16AcylCarMAT/Kmcpt2C8AcylCoAMAT + C8AcylCoAMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCoAMAT + CarMAT_VMAT*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + CoAMAT_VMAT*Kmcpt2C16AcylCarMAT + Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT)
	fRate8m() = 0.85*CarMAT_VMAT*Vcpt2/(C10AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCarMAT*Kmcpt2CarMAT) + C10AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT/Kmcpt2C10AcylCarMAT + C10AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCarMAT + C10AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCoAMAT*Kmcpt2CarMAT) + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT/Kmcpt2C10AcylCoAMAT + C10AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCoAMAT + C12AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCarMAT*Kmcpt2CarMAT) + C12AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT/Kmcpt2C12AcylCarMAT + C12AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCarMAT + C12AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCoAMAT*Kmcpt2CarMAT) + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT/Kmcpt2C12AcylCoAMAT + C12AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCoAMAT + C14AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCarMAT*Kmcpt2CarMAT) + C14AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT/Kmcpt2C14AcylCarMAT + C14AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCarMAT + C14AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCoAMAT*Kmcpt2CarMAT) + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT/Kmcpt2C14AcylCoAMAT + C14AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCoAMAT + C16AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2CoAMAT/Kmcpt2CarMAT + C16AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2 + C16AcylCarMAT_VMAT*Keqcpt2*Kmcpt2CoAMAT + C16AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCoAMAT*Kmcpt2CarMAT) + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT/Kmcpt2C16AcylCoAMAT + C16AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCoAMAT + C4AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCarMAT*Kmcpt2CarMAT) + C4AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT/Kmcpt2C4AcylCarMAT + C4AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCarMAT + C4AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCoAMAT*Kmcpt2CarMAT) + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT/Kmcpt2C4AcylCoAMAT + C4AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCoAMAT + C6AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCarMAT*Kmcpt2CarMAT) + C6AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT/Kmcpt2C6AcylCarMAT + C6AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCarMAT + C6AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCoAMAT*Kmcpt2CarMAT) + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT/Kmcpt2C6AcylCoAMAT + C6AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCoAMAT + C8AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCarMAT*Kmcpt2CarMAT) + C8AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT/Kmcpt2C8AcylCarMAT + C8AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCarMAT + C8AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCoAMAT*Kmcpt2CarMAT) + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT/Kmcpt2C8AcylCoAMAT + C8AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCoAMAT + CarMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + CoAMAT_VMAT*Keqcpt2*Kmcpt2C16AcylCarMAT + Keqcpt2*Kmcpt2C16AcylCarMAT*Kmcpt2CoAMAT)
	fRate9() = 1.0*CoAMAT_VMAT*Vcpt2/(C10AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCarMAT*Kmcpt2CarMAT) + C10AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C14AcylCarMAT/Kmcpt2C10AcylCarMAT + C10AcylCarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCarMAT + C10AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCoAMAT*Kmcpt2CarMAT) + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C14AcylCarMAT/Kmcpt2C10AcylCoAMAT + C10AcylCoAMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCoAMAT + C12AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCarMAT*Kmcpt2CarMAT) + C12AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C14AcylCarMAT/Kmcpt2C12AcylCarMAT + C12AcylCarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCarMAT + C12AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCoAMAT*Kmcpt2CarMAT) + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C14AcylCarMAT/Kmcpt2C12AcylCoAMAT + C12AcylCoAMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCoAMAT + C14AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + C14AcylCarMAT_VMAT*CoAMAT_VMAT + C14AcylCarMAT_VMAT*Kmcpt2CoAMAT + C14AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCoAMAT*Kmcpt2CarMAT) + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C14AcylCarMAT/Kmcpt2C14AcylCoAMAT + C14AcylCoAMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCoAMAT + C16AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCarMAT*Kmcpt2CarMAT) + C16AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C14AcylCarMAT/Kmcpt2C16AcylCarMAT + C16AcylCarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCarMAT + C16AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCoAMAT*Kmcpt2CarMAT) + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C14AcylCarMAT/Kmcpt2C16AcylCoAMAT + C16AcylCoAMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCoAMAT + C4AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCoAMAT*Kmcpt2CarMAT) + C4AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C14AcylCarMAT/Kmcpt2C4AcylCoAMAT + C4AcylCarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCoAMAT + C4AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCoAMAT*Kmcpt2CarMAT) + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C14AcylCarMAT/Kmcpt2C4AcylCoAMAT + C4AcylCoAMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCoAMAT + C6AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCarMAT*Kmcpt2CarMAT) + C6AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C14AcylCarMAT/Kmcpt2C6AcylCarMAT + C6AcylCarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCarMAT + C6AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCoAMAT*Kmcpt2CarMAT) + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C14AcylCarMAT/Kmcpt2C6AcylCoAMAT + C6AcylCoAMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCoAMAT + C8AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCarMAT*Kmcpt2CarMAT) + C8AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C14AcylCarMAT/Kmcpt2C8AcylCarMAT + C8AcylCarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCarMAT + C8AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCoAMAT*Kmcpt2CarMAT) + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C14AcylCarMAT/Kmcpt2C8AcylCoAMAT + C8AcylCoAMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCoAMAT + CarMAT_VMAT*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + CoAMAT_VMAT*Kmcpt2C14AcylCarMAT + Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT)
	fRate9m() = 1.0*CarMAT_VMAT*Vcpt2/(C10AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCarMAT*Kmcpt2CarMAT) + C10AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT/Kmcpt2C10AcylCarMAT + C10AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCarMAT + C10AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCoAMAT*Kmcpt2CarMAT) + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT/Kmcpt2C10AcylCoAMAT + C10AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCoAMAT + C12AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCarMAT*Kmcpt2CarMAT) + C12AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT/Kmcpt2C12AcylCarMAT + C12AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCarMAT + C12AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCoAMAT*Kmcpt2CarMAT) + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT/Kmcpt2C12AcylCoAMAT + C12AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCoAMAT + C14AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2CoAMAT/Kmcpt2CarMAT + C14AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2 + C14AcylCarMAT_VMAT*Keqcpt2*Kmcpt2CoAMAT + C14AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCoAMAT*Kmcpt2CarMAT) + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT/Kmcpt2C14AcylCoAMAT + C14AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCoAMAT + C16AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCarMAT*Kmcpt2CarMAT) + C16AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT/Kmcpt2C16AcylCarMAT + C16AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCarMAT + C16AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCoAMAT*Kmcpt2CarMAT) + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT/Kmcpt2C16AcylCoAMAT + C16AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCoAMAT + C4AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCoAMAT*Kmcpt2CarMAT) + C4AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT/Kmcpt2C4AcylCoAMAT + C4AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCoAMAT + C4AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCoAMAT*Kmcpt2CarMAT) + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT/Kmcpt2C4AcylCoAMAT + C4AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCoAMAT + C6AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCarMAT*Kmcpt2CarMAT) + C6AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT/Kmcpt2C6AcylCarMAT + C6AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCarMAT + C6AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCoAMAT*Kmcpt2CarMAT) + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT/Kmcpt2C6AcylCoAMAT + C6AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCoAMAT + C8AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCarMAT*Kmcpt2CarMAT) + C8AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT/Kmcpt2C8AcylCarMAT + C8AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCarMAT + C8AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCoAMAT*Kmcpt2CarMAT) + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT/Kmcpt2C8AcylCoAMAT + C8AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCoAMAT + CarMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + CoAMAT_VMAT*Keqcpt2*Kmcpt2C14AcylCarMAT + Keqcpt2*Kmcpt2C14AcylCarMAT*Kmcpt2CoAMAT)
	fRate10() = 0.95*CoAMAT_VMAT*Vcpt2/(C10AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCarMAT*Kmcpt2CarMAT) + C10AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C12AcylCarMAT/Kmcpt2C10AcylCarMAT + C10AcylCarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCarMAT + C10AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCoAMAT*Kmcpt2CarMAT) + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C12AcylCarMAT/Kmcpt2C10AcylCoAMAT + C10AcylCoAMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCoAMAT + C12AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + C12AcylCarMAT_VMAT*CoAMAT_VMAT + C12AcylCarMAT_VMAT*Kmcpt2CoAMAT + C12AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCoAMAT*Kmcpt2CarMAT) + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C12AcylCarMAT/Kmcpt2C12AcylCoAMAT + C12AcylCoAMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCoAMAT + C14AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCarMAT*Kmcpt2CarMAT) + C14AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C12AcylCarMAT/Kmcpt2C14AcylCarMAT + C14AcylCarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCarMAT + C14AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCoAMAT*Kmcpt2CarMAT) + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C12AcylCarMAT/Kmcpt2C14AcylCoAMAT + C14AcylCoAMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCoAMAT + C16AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCarMAT*Kmcpt2CarMAT) + C16AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C12AcylCarMAT/Kmcpt2C16AcylCarMAT + C16AcylCarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCarMAT + C16AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCoAMAT*Kmcpt2CarMAT) + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C12AcylCarMAT/Kmcpt2C16AcylCoAMAT + C16AcylCoAMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCoAMAT + C4AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCarMAT*Kmcpt2CarMAT) + C4AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C12AcylCarMAT/Kmcpt2C4AcylCarMAT + C4AcylCarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCarMAT + C4AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCoAMAT*Kmcpt2CarMAT) + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C12AcylCarMAT/Kmcpt2C4AcylCoAMAT + C4AcylCoAMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCoAMAT + C6AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCarMAT*Kmcpt2CarMAT) + C6AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C12AcylCarMAT/Kmcpt2C6AcylCarMAT + C6AcylCarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCarMAT + C6AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCoAMAT*Kmcpt2CarMAT) + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C12AcylCarMAT/Kmcpt2C6AcylCoAMAT + C6AcylCoAMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCoAMAT + C8AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCarMAT*Kmcpt2CarMAT) + C8AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C12AcylCarMAT/Kmcpt2C8AcylCarMAT + C8AcylCarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCarMAT + C8AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCoAMAT*Kmcpt2CarMAT) + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C12AcylCarMAT/Kmcpt2C8AcylCoAMAT + C8AcylCoAMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCoAMAT + CarMAT_VMAT*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + CoAMAT_VMAT*Kmcpt2C12AcylCarMAT + Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT)
	fRate10m() = 0.95*CarMAT_VMAT*Vcpt2/(C10AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCarMAT*Kmcpt2CarMAT) + C10AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT/Kmcpt2C10AcylCarMAT + C10AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCarMAT + C10AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCoAMAT*Kmcpt2CarMAT) + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT/Kmcpt2C10AcylCoAMAT + C10AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCoAMAT + C12AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2CoAMAT/Kmcpt2CarMAT + C12AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2 + C12AcylCarMAT_VMAT*Keqcpt2*Kmcpt2CoAMAT + C12AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCoAMAT*Kmcpt2CarMAT) + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT/Kmcpt2C12AcylCoAMAT + C12AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCoAMAT + C14AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCarMAT*Kmcpt2CarMAT) + C14AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT/Kmcpt2C14AcylCarMAT + C14AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCarMAT + C14AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCoAMAT*Kmcpt2CarMAT) + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT/Kmcpt2C14AcylCoAMAT + C14AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCoAMAT + C16AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCarMAT*Kmcpt2CarMAT) + C16AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT/Kmcpt2C16AcylCarMAT + C16AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCarMAT + C16AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCoAMAT*Kmcpt2CarMAT) + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT/Kmcpt2C16AcylCoAMAT + C16AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCoAMAT + C4AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCarMAT*Kmcpt2CarMAT) + C4AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT/Kmcpt2C4AcylCarMAT + C4AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCarMAT + C4AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCoAMAT*Kmcpt2CarMAT) + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT/Kmcpt2C4AcylCoAMAT + C4AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCoAMAT + C6AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCarMAT*Kmcpt2CarMAT) + C6AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT/Kmcpt2C6AcylCarMAT + C6AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCarMAT + C6AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCoAMAT*Kmcpt2CarMAT) + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT/Kmcpt2C6AcylCoAMAT + C6AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCoAMAT + C8AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCarMAT*Kmcpt2CarMAT) + C8AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT/Kmcpt2C8AcylCarMAT + C8AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCarMAT + C8AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCoAMAT*Kmcpt2CarMAT) + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT/Kmcpt2C8AcylCoAMAT + C8AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCoAMAT + CarMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + CoAMAT_VMAT*Keqcpt2*Kmcpt2C12AcylCarMAT + Keqcpt2*Kmcpt2C12AcylCarMAT*Kmcpt2CoAMAT)
	fRate11() = 0.95*CoAMAT_VMAT*Vcpt2/(C10AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + C10AcylCarMAT_VMAT*CoAMAT_VMAT + C10AcylCarMAT_VMAT*Kmcpt2CoAMAT + C10AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCoAMAT*Kmcpt2CarMAT) + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C10AcylCarMAT/Kmcpt2C10AcylCoAMAT + C10AcylCoAMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCoAMAT + C12AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCarMAT*Kmcpt2CarMAT) + C12AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C10AcylCarMAT/Kmcpt2C12AcylCarMAT + C12AcylCarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCarMAT + C12AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCoAMAT*Kmcpt2CarMAT) + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C10AcylCarMAT/Kmcpt2C12AcylCoAMAT + C12AcylCoAMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCoAMAT + C14AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCarMAT*Kmcpt2CarMAT) + C14AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C10AcylCarMAT/Kmcpt2C14AcylCarMAT + C14AcylCarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCarMAT + C14AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCoAMAT*Kmcpt2CarMAT) + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C10AcylCarMAT/Kmcpt2C14AcylCoAMAT + C14AcylCoAMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCoAMAT + C16AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCarMAT*Kmcpt2CarMAT) + C16AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C10AcylCarMAT/Kmcpt2C16AcylCarMAT + C16AcylCarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCarMAT + C16AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCoAMAT*Kmcpt2CarMAT) + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C10AcylCarMAT/Kmcpt2C16AcylCoAMAT + C16AcylCoAMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCoAMAT + C4AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCarMAT*Kmcpt2CarMAT) + C4AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C10AcylCarMAT/Kmcpt2C4AcylCarMAT + C4AcylCarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCarMAT + C4AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCoAMAT*Kmcpt2CarMAT) + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C10AcylCarMAT/Kmcpt2C4AcylCoAMAT + C4AcylCoAMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCoAMAT + C6AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCarMAT*Kmcpt2CarMAT) + C6AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C10AcylCarMAT/Kmcpt2C6AcylCarMAT + C6AcylCarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCarMAT + C6AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCoAMAT*Kmcpt2CarMAT) + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C10AcylCarMAT/Kmcpt2C6AcylCoAMAT + C6AcylCoAMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCoAMAT + C8AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCarMAT*Kmcpt2CarMAT) + C8AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C10AcylCarMAT/Kmcpt2C8AcylCarMAT + C8AcylCarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCarMAT + C8AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCoAMAT*Kmcpt2CarMAT) + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C10AcylCarMAT/Kmcpt2C8AcylCoAMAT + C8AcylCoAMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCoAMAT + CarMAT_VMAT*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + CoAMAT_VMAT*Kmcpt2C10AcylCarMAT + Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT)
	fRate11m() = 0.95*CarMAT_VMAT*Vcpt2/(C10AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2CoAMAT/Kmcpt2CarMAT + C10AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2 + C10AcylCarMAT_VMAT*Keqcpt2*Kmcpt2CoAMAT + C10AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCoAMAT*Kmcpt2CarMAT) + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT/Kmcpt2C10AcylCoAMAT + C10AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCoAMAT + C12AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCarMAT*Kmcpt2CarMAT) + C12AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT/Kmcpt2C12AcylCarMAT + C12AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCarMAT + C12AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCoAMAT*Kmcpt2CarMAT) + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT/Kmcpt2C12AcylCoAMAT + C12AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCoAMAT + C14AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCarMAT*Kmcpt2CarMAT) + C14AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT/Kmcpt2C14AcylCarMAT + C14AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCarMAT + C14AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCoAMAT*Kmcpt2CarMAT) + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT/Kmcpt2C14AcylCoAMAT + C14AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCoAMAT + C16AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCarMAT*Kmcpt2CarMAT) + C16AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT/Kmcpt2C16AcylCarMAT + C16AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCarMAT + C16AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCoAMAT*Kmcpt2CarMAT) + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT/Kmcpt2C16AcylCoAMAT + C16AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCoAMAT + C4AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCarMAT*Kmcpt2CarMAT) + C4AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT/Kmcpt2C4AcylCarMAT + C4AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCarMAT + C4AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCoAMAT*Kmcpt2CarMAT) + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT/Kmcpt2C4AcylCoAMAT + C4AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCoAMAT + C6AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCarMAT*Kmcpt2CarMAT) + C6AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT/Kmcpt2C6AcylCarMAT + C6AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCarMAT + C6AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCoAMAT*Kmcpt2CarMAT) + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT/Kmcpt2C6AcylCoAMAT + C6AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCoAMAT + C8AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCarMAT*Kmcpt2CarMAT) + C8AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT/Kmcpt2C8AcylCarMAT + C8AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCarMAT + C8AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCoAMAT*Kmcpt2CarMAT) + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT/Kmcpt2C8AcylCoAMAT + C8AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCoAMAT + CarMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + CoAMAT_VMAT*Keqcpt2*Kmcpt2C10AcylCarMAT + Keqcpt2*Kmcpt2C10AcylCarMAT*Kmcpt2CoAMAT)
	fRate12() = 0.35*CoAMAT_VMAT*Vcpt2/(C10AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCarMAT*Kmcpt2CarMAT) + C10AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C8AcylCarMAT/Kmcpt2C10AcylCarMAT + C10AcylCarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCarMAT + C10AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCoAMAT*Kmcpt2CarMAT) + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C8AcylCarMAT/Kmcpt2C10AcylCoAMAT + C10AcylCoAMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCoAMAT + C12AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCarMAT*Kmcpt2CarMAT) + C12AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C8AcylCarMAT/Kmcpt2C12AcylCarMAT + C12AcylCarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCarMAT + C12AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCoAMAT*Kmcpt2CarMAT) + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C8AcylCarMAT/Kmcpt2C12AcylCoAMAT + C12AcylCoAMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCoAMAT + C14AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCarMAT*Kmcpt2CarMAT) + C14AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C8AcylCarMAT/Kmcpt2C14AcylCarMAT + C14AcylCarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCarMAT + C14AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCoAMAT*Kmcpt2CarMAT) + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C8AcylCarMAT/Kmcpt2C14AcylCoAMAT + C14AcylCoAMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCoAMAT + C16AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCarMAT*Kmcpt2CarMAT) + C16AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C8AcylCarMAT/Kmcpt2C16AcylCarMAT + C16AcylCarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCarMAT + C16AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCoAMAT*Kmcpt2CarMAT) + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C8AcylCarMAT/Kmcpt2C16AcylCoAMAT + C16AcylCoAMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCoAMAT + C4AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCarMAT*Kmcpt2CarMAT) + C4AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C8AcylCarMAT/Kmcpt2C4AcylCarMAT + C4AcylCarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCarMAT + C4AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCoAMAT*Kmcpt2CarMAT) + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C8AcylCarMAT/Kmcpt2C4AcylCoAMAT + C4AcylCoAMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCoAMAT + C6AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCarMAT*Kmcpt2CarMAT) + C6AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C8AcylCarMAT/Kmcpt2C6AcylCarMAT + C6AcylCarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCarMAT + C6AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCoAMAT*Kmcpt2CarMAT) + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C8AcylCarMAT/Kmcpt2C6AcylCoAMAT + C6AcylCoAMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCoAMAT + C8AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + C8AcylCarMAT_VMAT*CoAMAT_VMAT + C8AcylCarMAT_VMAT*Kmcpt2CoAMAT + C8AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCoAMAT*Kmcpt2CarMAT) + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C8AcylCarMAT/Kmcpt2C8AcylCoAMAT + C8AcylCoAMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCoAMAT + CarMAT_VMAT*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + CoAMAT_VMAT*Kmcpt2C8AcylCarMAT + Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT)
	fRate12m() = 0.35*CarMAT_VMAT*Vcpt2/(C10AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCarMAT*Kmcpt2CarMAT) + C10AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT/Kmcpt2C10AcylCarMAT + C10AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCarMAT + C10AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCoAMAT*Kmcpt2CarMAT) + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT/Kmcpt2C10AcylCoAMAT + C10AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCoAMAT + C12AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCarMAT*Kmcpt2CarMAT) + C12AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT/Kmcpt2C12AcylCarMAT + C12AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCarMAT + C12AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCoAMAT*Kmcpt2CarMAT) + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT/Kmcpt2C12AcylCoAMAT + C12AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCoAMAT + C14AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCarMAT*Kmcpt2CarMAT) + C14AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT/Kmcpt2C14AcylCarMAT + C14AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCarMAT + C14AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCoAMAT*Kmcpt2CarMAT) + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT/Kmcpt2C14AcylCoAMAT + C14AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCoAMAT + C16AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCarMAT*Kmcpt2CarMAT) + C16AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT/Kmcpt2C16AcylCarMAT + C16AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCarMAT + C16AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCoAMAT*Kmcpt2CarMAT) + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT/Kmcpt2C16AcylCoAMAT + C16AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCoAMAT + C4AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCarMAT*Kmcpt2CarMAT) + C4AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT/Kmcpt2C4AcylCarMAT + C4AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCarMAT + C4AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCoAMAT*Kmcpt2CarMAT) + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT/Kmcpt2C4AcylCoAMAT + C4AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCoAMAT + C6AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCarMAT*Kmcpt2CarMAT) + C6AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT/Kmcpt2C6AcylCarMAT + C6AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCarMAT + C6AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCoAMAT*Kmcpt2CarMAT) + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT/Kmcpt2C6AcylCoAMAT + C6AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCoAMAT + C8AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2CoAMAT/Kmcpt2CarMAT + C8AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2 + C8AcylCarMAT_VMAT*Keqcpt2*Kmcpt2CoAMAT + C8AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCoAMAT*Kmcpt2CarMAT) + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT/Kmcpt2C8AcylCoAMAT + C8AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCoAMAT + CarMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + CoAMAT_VMAT*Keqcpt2*Kmcpt2C8AcylCarMAT + Keqcpt2*Kmcpt2C8AcylCarMAT*Kmcpt2CoAMAT)
	fRate13() = 0.15*CoAMAT_VMAT*Vcpt2/(C10AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCarMAT*Kmcpt2CarMAT) + C10AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C6AcylCarMAT/Kmcpt2C10AcylCarMAT + C10AcylCarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCarMAT + C10AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCoAMAT*Kmcpt2CarMAT) + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C6AcylCarMAT/Kmcpt2C10AcylCoAMAT + C10AcylCoAMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCoAMAT + C12AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCarMAT*Kmcpt2CarMAT) + C12AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C6AcylCarMAT/Kmcpt2C12AcylCarMAT + C12AcylCarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCarMAT + C12AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCoAMAT*Kmcpt2CarMAT) + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C6AcylCarMAT/Kmcpt2C12AcylCoAMAT + C12AcylCoAMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCoAMAT + C14AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCarMAT*Kmcpt2CarMAT) + C14AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C6AcylCarMAT/Kmcpt2C14AcylCarMAT + C14AcylCarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCarMAT + C14AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCoAMAT*Kmcpt2CarMAT) + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C6AcylCarMAT/Kmcpt2C14AcylCoAMAT + C14AcylCoAMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCoAMAT + C16AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCarMAT*Kmcpt2CarMAT) + C16AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C6AcylCarMAT/Kmcpt2C16AcylCarMAT + C16AcylCarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCarMAT + C16AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCoAMAT*Kmcpt2CarMAT) + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C6AcylCarMAT/Kmcpt2C16AcylCoAMAT + C16AcylCoAMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCoAMAT + C4AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCarMAT*Kmcpt2CarMAT) + C4AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C6AcylCarMAT/Kmcpt2C4AcylCarMAT + C4AcylCarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCarMAT + C4AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCoAMAT*Kmcpt2CarMAT) + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C6AcylCarMAT/Kmcpt2C4AcylCoAMAT + C4AcylCoAMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCoAMAT + C6AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + C6AcylCarMAT_VMAT*CoAMAT_VMAT + C6AcylCarMAT_VMAT*Kmcpt2CoAMAT + C6AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCoAMAT*Kmcpt2CarMAT) + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C6AcylCarMAT/Kmcpt2C6AcylCoAMAT + C6AcylCoAMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCoAMAT + C8AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCarMAT*Kmcpt2CarMAT) + C8AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C6AcylCarMAT/Kmcpt2C8AcylCarMAT + C8AcylCarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCarMAT + C8AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCoAMAT*Kmcpt2CarMAT) + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C6AcylCarMAT/Kmcpt2C8AcylCoAMAT + C8AcylCoAMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCoAMAT + CarMAT_VMAT*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + CoAMAT_VMAT*Kmcpt2C6AcylCarMAT + Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT)
	fRate13m() = 0.15*CarMAT_VMAT*Vcpt2/(C10AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCarMAT*Kmcpt2CarMAT) + C10AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT/Kmcpt2C10AcylCarMAT + C10AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCarMAT + C10AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCoAMAT*Kmcpt2CarMAT) + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT/Kmcpt2C10AcylCoAMAT + C10AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCoAMAT + C12AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCarMAT*Kmcpt2CarMAT) + C12AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT/Kmcpt2C12AcylCarMAT + C12AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCarMAT + C12AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCoAMAT*Kmcpt2CarMAT) + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT/Kmcpt2C12AcylCoAMAT + C12AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCoAMAT + C14AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCarMAT*Kmcpt2CarMAT) + C14AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT/Kmcpt2C14AcylCarMAT + C14AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCarMAT + C14AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCoAMAT*Kmcpt2CarMAT) + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT/Kmcpt2C14AcylCoAMAT + C14AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCoAMAT + C16AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCarMAT*Kmcpt2CarMAT) + C16AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT/Kmcpt2C16AcylCarMAT + C16AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCarMAT + C16AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCoAMAT*Kmcpt2CarMAT) + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT/Kmcpt2C16AcylCoAMAT + C16AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCoAMAT + C4AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCarMAT*Kmcpt2CarMAT) + C4AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT/Kmcpt2C4AcylCarMAT + C4AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCarMAT + C4AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCoAMAT*Kmcpt2CarMAT) + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT/Kmcpt2C4AcylCoAMAT + C4AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCoAMAT + C6AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2CoAMAT/Kmcpt2CarMAT + C6AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2 + C6AcylCarMAT_VMAT*Keqcpt2*Kmcpt2CoAMAT + C6AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCoAMAT*Kmcpt2CarMAT) + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT/Kmcpt2C6AcylCoAMAT + C6AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCoAMAT + C8AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCarMAT*Kmcpt2CarMAT) + C8AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT/Kmcpt2C8AcylCarMAT + C8AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCarMAT + C8AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCoAMAT*Kmcpt2CarMAT) + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT/Kmcpt2C8AcylCoAMAT + C8AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCoAMAT + CarMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + CoAMAT_VMAT*Keqcpt2*Kmcpt2C6AcylCarMAT + Keqcpt2*Kmcpt2C6AcylCarMAT*Kmcpt2CoAMAT)
	fRate14() = 0.01*CoAMAT_VMAT*Vcpt2/(C10AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCarMAT*Kmcpt2CarMAT) + C10AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C4AcylCarMAT/Kmcpt2C10AcylCarMAT + C10AcylCarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCarMAT + C10AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCoAMAT*Kmcpt2CarMAT) + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C4AcylCarMAT/Kmcpt2C10AcylCoAMAT + C10AcylCoAMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCoAMAT + C12AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCarMAT*Kmcpt2CarMAT) + C12AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C4AcylCarMAT/Kmcpt2C12AcylCarMAT + C12AcylCarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCarMAT + C12AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCoAMAT*Kmcpt2CarMAT) + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C4AcylCarMAT/Kmcpt2C12AcylCoAMAT + C12AcylCoAMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCoAMAT + C14AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCarMAT*Kmcpt2CarMAT) + C14AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C4AcylCarMAT/Kmcpt2C14AcylCarMAT + C14AcylCarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCarMAT + C14AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCoAMAT*Kmcpt2CarMAT) + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C4AcylCarMAT/Kmcpt2C14AcylCoAMAT + C14AcylCoAMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCoAMAT + C16AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCarMAT*Kmcpt2CarMAT) + C16AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C4AcylCarMAT/Kmcpt2C16AcylCarMAT + C16AcylCarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCarMAT + C16AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCoAMAT*Kmcpt2CarMAT) + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C4AcylCarMAT/Kmcpt2C16AcylCoAMAT + C16AcylCoAMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCoAMAT + C4AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + C4AcylCarMAT_VMAT*CoAMAT_VMAT + C4AcylCarMAT_VMAT*Kmcpt2CoAMAT + C4AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCoAMAT*Kmcpt2CarMAT) + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C4AcylCarMAT/Kmcpt2C4AcylCoAMAT + C4AcylCoAMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCoAMAT + C6AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCarMAT*Kmcpt2CarMAT) + C6AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C4AcylCarMAT/Kmcpt2C6AcylCarMAT + C6AcylCarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCarMAT + C6AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCoAMAT*Kmcpt2CarMAT) + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C4AcylCarMAT/Kmcpt2C6AcylCoAMAT + C6AcylCoAMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCoAMAT + C8AcylCarMAT_VMAT*CarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCarMAT*Kmcpt2CarMAT) + C8AcylCarMAT_VMAT*CoAMAT_VMAT*Kmcpt2C4AcylCarMAT/Kmcpt2C8AcylCarMAT + C8AcylCarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCarMAT + C8AcylCoAMAT_VMAT*CarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCoAMAT*Kmcpt2CarMAT) + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Kmcpt2C4AcylCarMAT/Kmcpt2C8AcylCoAMAT + C8AcylCoAMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCoAMAT + CarMAT_VMAT*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + CoAMAT_VMAT*Kmcpt2C4AcylCarMAT + Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT)
	fRate14m() = 0.01*CarMAT_VMAT*Vcpt2/(C10AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCarMAT*Kmcpt2CarMAT) + C10AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT/Kmcpt2C10AcylCarMAT + C10AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCarMAT + C10AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C10AcylCoAMAT*Kmcpt2CarMAT) + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT/Kmcpt2C10AcylCoAMAT + C10AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C10AcylCoAMAT + C12AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCarMAT*Kmcpt2CarMAT) + C12AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT/Kmcpt2C12AcylCarMAT + C12AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCarMAT + C12AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C12AcylCoAMAT*Kmcpt2CarMAT) + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT/Kmcpt2C12AcylCoAMAT + C12AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C12AcylCoAMAT + C14AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCarMAT*Kmcpt2CarMAT) + C14AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT/Kmcpt2C14AcylCarMAT + C14AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCarMAT + C14AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C14AcylCoAMAT*Kmcpt2CarMAT) + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT/Kmcpt2C14AcylCoAMAT + C14AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C14AcylCoAMAT + C16AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCarMAT*Kmcpt2CarMAT) + C16AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT/Kmcpt2C16AcylCarMAT + C16AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCarMAT + C16AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C16AcylCoAMAT*Kmcpt2CarMAT) + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT/Kmcpt2C16AcylCoAMAT + C16AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C16AcylCoAMAT + C4AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2CoAMAT/Kmcpt2CarMAT + C4AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2 + C4AcylCarMAT_VMAT*Keqcpt2*Kmcpt2CoAMAT + C4AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C4AcylCoAMAT*Kmcpt2CarMAT) + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT/Kmcpt2C4AcylCoAMAT + C4AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C4AcylCoAMAT + C6AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCarMAT*Kmcpt2CarMAT) + C6AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT/Kmcpt2C6AcylCarMAT + C6AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCarMAT + C6AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C6AcylCoAMAT*Kmcpt2CarMAT) + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT/Kmcpt2C6AcylCoAMAT + C6AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C6AcylCoAMAT + C8AcylCarMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCarMAT*Kmcpt2CarMAT) + C8AcylCarMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT/Kmcpt2C8AcylCarMAT + C8AcylCarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCarMAT + C8AcylCoAMAT_VMAT*CarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/(Kmcpt2C8AcylCoAMAT*Kmcpt2CarMAT) + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT/Kmcpt2C8AcylCoAMAT + C8AcylCoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2C8AcylCoAMAT + CarMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT/Kmcpt2CarMAT + CoAMAT_VMAT*Keqcpt2*Kmcpt2C4AcylCarMAT + Keqcpt2*Kmcpt2C4AcylCarMAT*Kmcpt2CoAMAT)
	fRate15() = 1.0*Vvlcad*(C16AcylCoAMAT_VMAT*(-FADHMAT_VMAT + FADtMAT_VMAT)/(KmvlcadC16AcylCoAMAT*KmvlcadFAD) - C16EnoylCoAMAT_VMAT*FADHMAT_VMAT/(Keqvlcad*KmvlcadC16AcylCoAMAT*KmvlcadFAD))/((FADHMAT_VMAT/KmvlcadFADH + 1 + (-FADHMAT_VMAT + FADtMAT_VMAT)/KmvlcadFAD)*(C12AcylCoAMAT_VMAT/KmvlcadC12AcylCoAMAT + C12EnoylCoAMAT_VMAT/KmvlcadC12EnoylCoAMAT + C14AcylCoAMAT_VMAT/KmvlcadC14AcylCoAMAT + C14EnoylCoAMAT_VMAT/KmvlcadC14EnoylCoAMAT + C16AcylCoAMAT_VMAT/KmvlcadC16AcylCoAMAT + C16EnoylCoAMAT_VMAT/KmvlcadC16EnoylCoAMAT + 1))
	fRate16() = 0.42*Vvlcad*(C14AcylCoAMAT_VMAT*(-FADHMAT_VMAT + FADtMAT_VMAT)/(KmvlcadC14AcylCoAMAT*KmvlcadFAD) - C14EnoylCoAMAT_VMAT*FADHMAT_VMAT/(Keqvlcad*KmvlcadC14AcylCoAMAT*KmvlcadFAD))/((FADHMAT_VMAT/KmvlcadFADH + 1 + (-FADHMAT_VMAT + FADtMAT_VMAT)/KmvlcadFAD)*(C12AcylCoAMAT_VMAT/KmvlcadC12AcylCoAMAT + C12EnoylCoAMAT_VMAT/KmvlcadC12EnoylCoAMAT + C14AcylCoAMAT_VMAT/KmvlcadC14AcylCoAMAT + C14EnoylCoAMAT_VMAT/KmvlcadC14EnoylCoAMAT + C16AcylCoAMAT_VMAT/KmvlcadC16AcylCoAMAT + C16EnoylCoAMAT_VMAT/KmvlcadC16EnoylCoAMAT + 1))
	fRate17() = 0.11*Vvlcad*(C12AcylCoAMAT_VMAT*(-FADHMAT_VMAT + FADtMAT_VMAT)/(KmvlcadC12AcylCoAMAT*KmvlcadFAD) - C12EnoylCoAMAT_VMAT*FADHMAT_VMAT/(Keqvlcad*KmvlcadC12AcylCoAMAT*KmvlcadFAD))/((FADHMAT_VMAT/KmvlcadFADH + 1 + (-FADHMAT_VMAT + FADtMAT_VMAT)/KmvlcadFAD)*(C12AcylCoAMAT_VMAT/KmvlcadC12AcylCoAMAT + C12EnoylCoAMAT_VMAT/KmvlcadC12EnoylCoAMAT + C14AcylCoAMAT_VMAT/KmvlcadC14AcylCoAMAT + C14EnoylCoAMAT_VMAT/KmvlcadC14EnoylCoAMAT + C16AcylCoAMAT_VMAT/KmvlcadC16AcylCoAMAT + C16EnoylCoAMAT_VMAT/KmvlcadC16EnoylCoAMAT + 1))
	fRate18() = 0.9*Vlcad*(C16AcylCoAMAT_VMAT*(-FADHMAT_VMAT + FADtMAT_VMAT)/(KmlcadC16AcylCoAMAT*KmlcadFAD) - C16EnoylCoAMAT_VMAT*FADHMAT_VMAT/(Keqlcad*KmlcadC16AcylCoAMAT*KmlcadFAD))/((FADHMAT_VMAT/KmlcadFADH + 1 + (-FADHMAT_VMAT + FADtMAT_VMAT)/KmlcadFAD)*(C10AcylCoAMAT_VMAT/KmlcadC10AcylCoAMAT + C10EnoylCoAMAT_VMAT/KmlcadC10EnoylCoAMAT + C12AcylCoAMAT_VMAT/KmlcadC12AcylCoAMAT + C12EnoylCoAMAT_VMAT/KmlcadC12EnoylCoAMAT + C14AcylCoAMAT_VMAT/KmlcadC14AcylCoAMAT + C14EnoylCoAMAT_VMAT/KmlcadC14EnoylCoAMAT + C16AcylCoAMAT_VMAT/KmlcadC16AcylCoAMAT + C16EnoylCoAMAT_VMAT/KmlcadC16EnoylCoAMAT + C8AcylCoAMAT_VMAT/KmlcadC8AcylCoAMAT + C8EnoylCoAMAT_VMAT/KmlcadC8EnoylCoAMAT + 1))
	fRate19() = 1.0*Vlcad*(C14AcylCoAMAT_VMAT*(-FADHMAT_VMAT + FADtMAT_VMAT)/(KmlcadC14AcylCoAMAT*KmlcadFAD) - C14EnoylCoAMAT_VMAT*FADHMAT_VMAT/(Keqlcad*KmlcadC14AcylCoAMAT*KmlcadFAD))/((FADHMAT_VMAT/KmlcadFADH + 1 + (-FADHMAT_VMAT + FADtMAT_VMAT)/KmlcadFAD)*(C10AcylCoAMAT_VMAT/KmlcadC10AcylCoAMAT + C10EnoylCoAMAT_VMAT/KmlcadC10EnoylCoAMAT + C12AcylCoAMAT_VMAT/KmlcadC12AcylCoAMAT + C12EnoylCoAMAT_VMAT/KmlcadC12EnoylCoAMAT + C14AcylCoAMAT_VMAT/KmlcadC14AcylCoAMAT + C14EnoylCoAMAT_VMAT/KmlcadC14EnoylCoAMAT + C16AcylCoAMAT_VMAT/KmlcadC16AcylCoAMAT + C16EnoylCoAMAT_VMAT/KmlcadC16EnoylCoAMAT + C8AcylCoAMAT_VMAT/KmlcadC8AcylCoAMAT + C8EnoylCoAMAT_VMAT/KmlcadC8EnoylCoAMAT + 1))
	fRate20() = 0.9*Vlcad*(C12AcylCoAMAT_VMAT*(-FADHMAT_VMAT + FADtMAT_VMAT)/(KmlcadC12AcylCoAMAT*KmlcadFAD) - C14EnoylCoAMAT_VMAT*FADHMAT_VMAT/(Keqlcad*KmlcadC12AcylCoAMAT*KmlcadFAD))/((FADHMAT_VMAT/KmlcadFADH + 1 + (-FADHMAT_VMAT + FADtMAT_VMAT)/KmlcadFAD)*(C10AcylCoAMAT_VMAT/KmlcadC10AcylCoAMAT + C10EnoylCoAMAT_VMAT/KmlcadC10EnoylCoAMAT + C12AcylCoAMAT_VMAT/KmlcadC12AcylCoAMAT + C14AcylCoAMAT_VMAT/KmlcadC14AcylCoAMAT + C14EnoylCoAMAT_VMAT/KmlcadC14EnoylCoAMAT + C14EnoylCoAMAT_VMAT/KmlcadC12EnoylCoAMAT + C16AcylCoAMAT_VMAT/KmlcadC16AcylCoAMAT + C16EnoylCoAMAT_VMAT/KmlcadC16EnoylCoAMAT + C8AcylCoAMAT_VMAT/KmlcadC8AcylCoAMAT + C8EnoylCoAMAT_VMAT/KmlcadC8EnoylCoAMAT + 1))
	fRate21() = 0.75*Vlcad*(C10AcylCoAMAT_VMAT*(-FADHMAT_VMAT + FADtMAT_VMAT)/(KmlcadC10AcylCoAMAT*KmlcadFAD) - C10EnoylCoAMAT_VMAT*FADHMAT_VMAT/(Keqlcad*KmlcadC10AcylCoAMAT*KmlcadFAD))/((FADHMAT_VMAT/KmlcadFADH + 1 + (-FADHMAT_VMAT + FADtMAT_VMAT)/KmlcadFAD)*(C10AcylCoAMAT_VMAT/KmlcadC10AcylCoAMAT + C10EnoylCoAMAT_VMAT/KmlcadC10EnoylCoAMAT + C12AcylCoAMAT_VMAT/KmlcadC12AcylCoAMAT + C12EnoylCoAMAT_VMAT/KmlcadC12EnoylCoAMAT + C14AcylCoAMAT_VMAT/KmlcadC14AcylCoAMAT + C14EnoylCoAMAT_VMAT/KmlcadC14EnoylCoAMAT + C16AcylCoAMAT_VMAT/KmlcadC16AcylCoAMAT + C16EnoylCoAMAT_VMAT/KmlcadC16EnoylCoAMAT + C8AcylCoAMAT_VMAT/KmlcadC8AcylCoAMAT + C8EnoylCoAMAT_VMAT/KmlcadC8EnoylCoAMAT + 1))
	fRate22() = 0.38*Vmcad*(C12AcylCoAMAT_VMAT*(-FADHMAT_VMAT + FADtMAT_VMAT)/(KmmcadC12AcylCoAMAT*KmmcadFAD) - C12EnoylCoAMAT_VMAT*FADHMAT_VMAT/(Keqmcad*KmmcadC12AcylCoAMAT*KmmcadFAD))/((FADHMAT_VMAT/KmmcadFADH + 1 + (-FADHMAT_VMAT + FADtMAT_VMAT)/KmmcadFAD)*(C10AcylCoAMAT_VMAT/KmmcadC10AcylCoAMAT + C10EnoylCoAMAT_VMAT/KmmcadC10EnoylCoAMAT + C12AcylCoAMAT_VMAT/KmmcadC12AcylCoAMAT + C12EnoylCoAMAT_VMAT/KmmcadC12EnoylCoAMAT + C4AcylCoAMAT_VMAT/KmmcadC4AcylCoAMAT + C4EnoylCoAMAT_VMAT/KmmcadC4EnoylCoAMAT + C6AcylCoAMAT_VMAT/KmmcadC6AcylCoAMAT + C6EnoylCoAMAT_VMAT/KmmcadC6EnoylCoAMAT + C8AcylCoAMAT_VMAT/KmmcadC8AcylCoAMAT + C8EnoylCoAMAT_VMAT/KmmcadC8EnoylCoAMAT + 1))
	fRate23() = 0.8*Vmcad*(C10AcylCoAMAT_VMAT*(-FADHMAT_VMAT + FADtMAT_VMAT)/(KmmcadC10AcylCoAMAT*KmmcadFAD) - C10EnoylCoAMAT_VMAT*FADHMAT_VMAT/(Keqmcad*KmmcadC10AcylCoAMAT*KmmcadFAD))/((FADHMAT_VMAT/KmmcadFADH + 1 + (-FADHMAT_VMAT + FADtMAT_VMAT)/KmmcadFAD)*(C10AcylCoAMAT_VMAT/KmmcadC10AcylCoAMAT + C10EnoylCoAMAT_VMAT/KmmcadC10EnoylCoAMAT + C12AcylCoAMAT_VMAT/KmmcadC12AcylCoAMAT + C12EnoylCoAMAT_VMAT/KmmcadC12EnoylCoAMAT + C4AcylCoAMAT_VMAT/KmmcadC4AcylCoAMAT + C4EnoylCoAMAT_VMAT/KmmcadC4EnoylCoAMAT + C6AcylCoAMAT_VMAT/KmmcadC6AcylCoAMAT + C6EnoylCoAMAT_VMAT/KmmcadC6EnoylCoAMAT + C8AcylCoAMAT_VMAT/KmmcadC8AcylCoAMAT + C8EnoylCoAMAT_VMAT/KmmcadC8EnoylCoAMAT + 1))
	fRate24() = 0.87*Vmcad*(C8AcylCoAMAT_VMAT*(-FADHMAT_VMAT + FADtMAT_VMAT)/(KmmcadC8AcylCoAMAT*KmmcadFAD) - C8EnoylCoAMAT_VMAT*FADHMAT_VMAT/(Keqmcad*KmmcadC8AcylCoAMAT*KmmcadFAD))/((FADHMAT_VMAT/KmmcadFADH + 1 + (-FADHMAT_VMAT + FADtMAT_VMAT)/KmmcadFAD)*(C10AcylCoAMAT_VMAT/KmmcadC10AcylCoAMAT + C10EnoylCoAMAT_VMAT/KmmcadC10EnoylCoAMAT + C12AcylCoAMAT_VMAT/KmmcadC12AcylCoAMAT + C12EnoylCoAMAT_VMAT/KmmcadC12EnoylCoAMAT + C4AcylCoAMAT_VMAT/KmmcadC4AcylCoAMAT + C4EnoylCoAMAT_VMAT/KmmcadC4EnoylCoAMAT + C6AcylCoAMAT_VMAT/KmmcadC6AcylCoAMAT + C6EnoylCoAMAT_VMAT/KmmcadC6EnoylCoAMAT + C8AcylCoAMAT_VMAT/KmmcadC8AcylCoAMAT + C8EnoylCoAMAT_VMAT/KmmcadC8EnoylCoAMAT + 1))
	fRate25() = 1.0*Vmcad*(C6AcylCoAMAT_VMAT*(-FADHMAT_VMAT + FADtMAT_VMAT)/(KmmcadC6AcylCoAMAT*KmmcadFAD) - C6EnoylCoAMAT_VMAT*FADHMAT_VMAT/(Keqmcad*KmmcadC6AcylCoAMAT*KmmcadFAD))/((FADHMAT_VMAT/KmmcadFADH + 1 + (-FADHMAT_VMAT + FADtMAT_VMAT)/KmmcadFAD)*(C10AcylCoAMAT_VMAT/KmmcadC10AcylCoAMAT + C10EnoylCoAMAT_VMAT/KmmcadC10EnoylCoAMAT + C12AcylCoAMAT_VMAT/KmmcadC12AcylCoAMAT + C12EnoylCoAMAT_VMAT/KmmcadC12EnoylCoAMAT + C4AcylCoAMAT_VMAT/KmmcadC4AcylCoAMAT + C4EnoylCoAMAT_VMAT/KmmcadC4EnoylCoAMAT + C6AcylCoAMAT_VMAT/KmmcadC6AcylCoAMAT + C6EnoylCoAMAT_VMAT/KmmcadC6EnoylCoAMAT + C8AcylCoAMAT_VMAT/KmmcadC8AcylCoAMAT + C8EnoylCoAMAT_VMAT/KmmcadC8EnoylCoAMAT + 1))
	fRate26() = 1.0*Vscad*(C4AcylCoAMAT_VMAT*(-FADHMAT_VMAT + FADtMAT_VMAT)/(KmscadC4AcylCoAMAT*KmscadFAD) - C4EnoylCoAMAT_VMAT*FADHMAT_VMAT/(Keqscad*KmscadC4AcylCoAMAT*KmscadFAD))/((FADHMAT_VMAT/KmscadFADH + 1 + (-FADHMAT_VMAT + FADtMAT_VMAT)/KmscadFAD)*(C4AcylCoAMAT_VMAT/KmscadC4AcylCoAMAT + C4EnoylCoAMAT_VMAT/KmscadC4EnoylCoAMAT + C6AcylCoAMAT_VMAT/KmscadC6AcylCoAMAT + C6EnoylCoAMAT_VMAT/KmscadC6EnoylCoAMAT + 1))
	fRate27() = 1.0*CoAMAT_VMAT*Vmckat/(AcetylCoAMAT_VMAT^2*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT^2 + AcetylCoAMAT_VMAT*C10AcylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC10AcylCoAMAT) + AcetylCoAMAT_VMAT*C10KetoacylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC10KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C12AcylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC12AcylCoAMAT) + AcetylCoAMAT_VMAT*C12KetoacylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC12KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C14AcylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC14AcylCoAMAT) + AcetylCoAMAT_VMAT*C14KetoacylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC14KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C16AcylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC16AcylCoAMAT) + AcetylCoAMAT_VMAT*C16KetoacylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC16KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C4AcetoacylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC4AcetoacylCoAMAT) + AcetylCoAMAT_VMAT*C4AcylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC4AcylCoAMAT) + AcetylCoAMAT_VMAT*C6AcylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC6AcylCoAMAT) + AcetylCoAMAT_VMAT*C6KetoacylCoAMAT_VMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT + AcetylCoAMAT_VMAT*C8AcylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC8AcylCoAMAT) + AcetylCoAMAT_VMAT*C8KetoacylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC8KetoacylCoAMAT) + AcetylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC6KetoacylCoAMAT/KmmckatAcetylCoAMAT + 2.0*AcetylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC6KetoacylCoAMAT/KmmckatC10AcylCoAMAT + C10AcylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC10AcylCoAMAT + C10KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC6KetoacylCoAMAT/KmmckatC10KetoacylCoAMAT + C10KetoacylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC10KetoacylCoAMAT + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC6KetoacylCoAMAT/KmmckatC12AcylCoAMAT + C12AcylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC12AcylCoAMAT + C12KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC6KetoacylCoAMAT/KmmckatC12KetoacylCoAMAT + C12KetoacylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC12KetoacylCoAMAT + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC6KetoacylCoAMAT/KmmckatC14AcylCoAMAT + C14AcylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC14AcylCoAMAT + C14KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC6KetoacylCoAMAT/KmmckatC14KetoacylCoAMAT + C14KetoacylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC14KetoacylCoAMAT + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC6KetoacylCoAMAT/KmmckatC16AcylCoAMAT + C16AcylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC16AcylCoAMAT + C16KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC6KetoacylCoAMAT/KmmckatC16KetoacylCoAMAT + C16KetoacylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC16KetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC6KetoacylCoAMAT/KmmckatC4AcetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC4AcetoacylCoAMAT + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC6KetoacylCoAMAT/KmmckatC4AcylCoAMAT + C4AcylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC4AcylCoAMAT + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC6KetoacylCoAMAT/KmmckatC6AcylCoAMAT + C6AcylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC6AcylCoAMAT + C6KetoacylCoAMAT_VMAT*CoAMAT_VMAT + C6KetoacylCoAMAT_VMAT*KmmckatCoAMAT + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC6KetoacylCoAMAT/KmmckatC8AcylCoAMAT + C8AcylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC8AcylCoAMAT + C8KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC6KetoacylCoAMAT/KmmckatC8KetoacylCoAMAT + C8KetoacylCoAMAT_VMAT*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC8KetoacylCoAMAT + CoAMAT_VMAT*KmmckatC6KetoacylCoAMAT + KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT)
	fRate27m() = 1.0*Vmckat/(AcetylCoAMAT_VMAT^2*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT^2 + AcetylCoAMAT_VMAT*C10AcylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC10AcylCoAMAT) + AcetylCoAMAT_VMAT*C10KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC10KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C12AcylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC12AcylCoAMAT) + AcetylCoAMAT_VMAT*C12KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC12KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C14AcylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC14AcylCoAMAT) + AcetylCoAMAT_VMAT*C14KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC14KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C16AcylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC16AcylCoAMAT) + AcetylCoAMAT_VMAT*C16KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC16KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C4AcetoacylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC4AcetoacylCoAMAT) + AcetylCoAMAT_VMAT*C4AcylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC4AcylCoAMAT) + AcetylCoAMAT_VMAT*C6AcylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC6AcylCoAMAT) + AcetylCoAMAT_VMAT*C6KetoacylCoAMAT_VMAT*Keqmckat*KmmckatCoAMAT/KmmckatAcetylCoAMAT + AcetylCoAMAT_VMAT*C8AcylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC8AcylCoAMAT) + AcetylCoAMAT_VMAT*C8KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC8KetoacylCoAMAT) + AcetylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT/KmmckatAcetylCoAMAT + 2.0*AcetylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT/KmmckatC10AcylCoAMAT + C10AcylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC10AcylCoAMAT + C10KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT/KmmckatC10KetoacylCoAMAT + C10KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC10KetoacylCoAMAT + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT/KmmckatC12AcylCoAMAT + C12AcylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC12AcylCoAMAT + C12KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT/KmmckatC12KetoacylCoAMAT + C12KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC12KetoacylCoAMAT + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT/KmmckatC14AcylCoAMAT + C14AcylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC14AcylCoAMAT + C14KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT/KmmckatC14KetoacylCoAMAT + C14KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC14KetoacylCoAMAT + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT/KmmckatC16AcylCoAMAT + C16AcylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC16AcylCoAMAT + C16KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT/KmmckatC16KetoacylCoAMAT + C16KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC16KetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT/KmmckatC4AcetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC4AcetoacylCoAMAT + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT/KmmckatC4AcylCoAMAT + C4AcylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC4AcylCoAMAT + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT/KmmckatC6AcylCoAMAT + C6AcylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC6AcylCoAMAT + C6KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat + C6KetoacylCoAMAT_VMAT*Keqmckat*KmmckatCoAMAT + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT/KmmckatC8AcylCoAMAT + C8AcylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC8AcylCoAMAT + C8KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT/KmmckatC8KetoacylCoAMAT + C8KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT/KmmckatC8KetoacylCoAMAT + CoAMAT_VMAT*Keqmckat*KmmckatC6KetoacylCoAMAT + Keqmckat*KmmckatC6KetoacylCoAMAT*KmmckatCoAMAT)
	fRate28() = 0.49*CoAMAT_VMAT*Vmckat/(AcetylCoAMAT_VMAT^2*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT^2 + AcetylCoAMAT_VMAT*C10AcylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC10AcylCoAMAT) + AcetylCoAMAT_VMAT*C10KetoacylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC10KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C12AcylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC12AcylCoAMAT) + AcetylCoAMAT_VMAT*C12KetoacylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC12KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C14AcylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC14AcylCoAMAT) + AcetylCoAMAT_VMAT*C14KetoacylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC14KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C16AcylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC16AcylCoAMAT) + AcetylCoAMAT_VMAT*C16KetoacylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC16KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C4AcetoacylCoAMAT_VMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT + AcetylCoAMAT_VMAT*C4AcylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC4AcylCoAMAT) + AcetylCoAMAT_VMAT*C6AcylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC6AcylCoAMAT) + AcetylCoAMAT_VMAT*C6KetoacylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC6KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C8AcylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC8AcylCoAMAT) + AcetylCoAMAT_VMAT*C8KetoacylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC8KetoacylCoAMAT) + AcetylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT/KmmckatAcetylCoAMAT + 2.0*AcetylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT/KmmckatC10AcylCoAMAT + C10AcylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC10AcylCoAMAT + C10KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT/KmmckatC10KetoacylCoAMAT + C10KetoacylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC10KetoacylCoAMAT + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT/KmmckatC12AcylCoAMAT + C12AcylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC12AcylCoAMAT + C12KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT/KmmckatC12KetoacylCoAMAT + C12KetoacylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC12KetoacylCoAMAT + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT/KmmckatC14AcylCoAMAT + C14AcylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC14AcylCoAMAT + C14KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT/KmmckatC14KetoacylCoAMAT + C14KetoacylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC14KetoacylCoAMAT + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT/KmmckatC16AcylCoAMAT + C16AcylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC16AcylCoAMAT + C16KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT/KmmckatC16KetoacylCoAMAT + C16KetoacylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC16KetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT*CoAMAT_VMAT + C4AcetoacylCoAMAT_VMAT*KmmckatCoAMAT + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT/KmmckatC4AcylCoAMAT + C4AcylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC4AcylCoAMAT + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT/KmmckatC6AcylCoAMAT + C6AcylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC6AcylCoAMAT + C6KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT/KmmckatC6KetoacylCoAMAT + C6KetoacylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC6KetoacylCoAMAT + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT/KmmckatC8AcylCoAMAT + C8AcylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC8AcylCoAMAT + C8KetoacylCoAMAT_VMAT*CoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT/KmmckatC8KetoacylCoAMAT + C8KetoacylCoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC8KetoacylCoAMAT + CoAMAT_VMAT*KmmckatC4AcetoacylCoAMAT + KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT)
	fRate28m() = 0.49*Vmckat/(AcetylCoAMAT_VMAT^2*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT^2 + AcetylCoAMAT_VMAT*C10AcylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC10AcylCoAMAT) + AcetylCoAMAT_VMAT*C10KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC10KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C12AcylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC12AcylCoAMAT) + AcetylCoAMAT_VMAT*C12KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC12KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C14AcylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC14AcylCoAMAT) + AcetylCoAMAT_VMAT*C14KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC14KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C16AcylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC16AcylCoAMAT) + AcetylCoAMAT_VMAT*C16KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC16KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C4AcetoacylCoAMAT_VMAT*Keqmckat*KmmckatCoAMAT/KmmckatAcetylCoAMAT + AcetylCoAMAT_VMAT*C4AcylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC4AcylCoAMAT) + AcetylCoAMAT_VMAT*C6AcylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC6AcylCoAMAT) + AcetylCoAMAT_VMAT*C6KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC6KetoacylCoAMAT) + AcetylCoAMAT_VMAT*C8AcylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC8AcylCoAMAT) + AcetylCoAMAT_VMAT*C8KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/(KmmckatAcetylCoAMAT*KmmckatC8KetoacylCoAMAT) + AcetylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT/KmmckatAcetylCoAMAT + 2.0*AcetylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatAcetylCoAMAT + C10AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT/KmmckatC10AcylCoAMAT + C10AcylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC10AcylCoAMAT + C10KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT/KmmckatC10KetoacylCoAMAT + C10KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC10KetoacylCoAMAT + C12AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT/KmmckatC12AcylCoAMAT + C12AcylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC12AcylCoAMAT + C12KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT/KmmckatC12KetoacylCoAMAT + C12KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC12KetoacylCoAMAT + C14AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT/KmmckatC14AcylCoAMAT + C14AcylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC14AcylCoAMAT + C14KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT/KmmckatC14KetoacylCoAMAT + C14KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC14KetoacylCoAMAT + C16AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT/KmmckatC16AcylCoAMAT + C16AcylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC16AcylCoAMAT + C16KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT/KmmckatC16KetoacylCoAMAT + C16KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC16KetoacylCoAMAT + C4AcetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat + C4AcetoacylCoAMAT_VMAT*Keqmckat*KmmckatCoAMAT + C4AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT/KmmckatC4AcylCoAMAT + C4AcylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC4AcylCoAMAT + C6AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT/KmmckatC6AcylCoAMAT + C6AcylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC6AcylCoAMAT + C6KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT/KmmckatC6KetoacylCoAMAT + C6KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC6KetoacylCoAMAT + C8AcylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT/KmmckatC8AcylCoAMAT + C8AcylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC8AcylCoAMAT + C8KetoacylCoAMAT_VMAT*CoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT/KmmckatC8KetoacylCoAMAT + C8KetoacylCoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT/KmmckatC8KetoacylCoAMAT + CoAMAT_VMAT*Keqmckat*KmmckatC4AcetoacylCoAMAT + Keqmckat*KmmckatC4AcetoacylCoAMAT*KmmckatCoAMAT)
	fRate29() = 1.0*Vmtp*(-AcetylCoAMAT_VMAT*C14AcylCoAMAT_VMAT*NADHMAT_VMAT/(Keqmtp*KmmtpC16EnoylCoAMAT*KmmtpCoAMAT*KmmtpNADMAT) + C16EnoylCoAMAT_VMAT*CoAMAT_VMAT*(-NADHMAT_VMAT + NADtMAT_VMAT)/(KmmtpC16EnoylCoAMAT*KmmtpCoAMAT*KmmtpNADMAT))/((1 + (-NADHMAT_VMAT + NADtMAT_VMAT)/KmmtpNADMAT + NADHMAT_VMAT/KmmtpNADHMAT)*(AcetylCoAMAT_VMAT/KmmtpAcetylCoAMAT + CoAMAT_VMAT/KmmtpCoAMAT + 1)*(C10AcylCoAMAT_VMAT/KmmtpC10AcylCoAMAT + C10EnoylCoAMAT_VMAT/KmmtpC10EnoylCoAMAT + C12AcylCoAMAT_VMAT/KmmtpC12AcylCoAMAT + C12EnoylCoAMAT_VMAT/KmmtpC12EnoylCoAMAT + C14AcylCoAMAT_VMAT/KmmtpC14AcylCoAMAT + C14EnoylCoAMAT_VMAT/KmmtpC14EnoylCoAMAT + C16AcylCoAMAT_VMAT/KmmtpC16AcylCoAMAT + C16EnoylCoAMAT_VMAT/KmmtpC16EnoylCoAMAT + C4AcetoacylCoAMAT_VMAT/KicrotC4AcetoacylCoA + C6AcylCoAMAT_VMAT/KmmtpC6AcylCoAMAT + C8AcylCoAMAT_VMAT/KmmtpC8AcylCoAMAT + C8EnoylCoAMAT_VMAT/KmmtpC8EnoylCoAMAT + 1))
	fRate30() = 0.9*Vmtp*(-AcetylCoAMAT_VMAT*C12AcylCoAMAT_VMAT*NADHMAT_VMAT/(Keqmtp*KmmtpC14EnoylCoAMAT*KmmtpCoAMAT*KmmtpNADMAT) + C14EnoylCoAMAT_VMAT*CoAMAT_VMAT*(-NADHMAT_VMAT + NADtMAT_VMAT)/(KmmtpC14EnoylCoAMAT*KmmtpCoAMAT*KmmtpNADMAT))/((1 + (-NADHMAT_VMAT + NADtMAT_VMAT)/KmmtpNADMAT + NADHMAT_VMAT/KmmtpNADHMAT)*(AcetylCoAMAT_VMAT/KmmtpAcetylCoAMAT + CoAMAT_VMAT/KmmtpCoAMAT + 1)*(C10AcylCoAMAT_VMAT/KmmtpC10AcylCoAMAT + C10EnoylCoAMAT_VMAT/KmmtpC10EnoylCoAMAT + C12AcylCoAMAT_VMAT/KmmtpC12AcylCoAMAT + C12EnoylCoAMAT_VMAT/KmmtpC12EnoylCoAMAT + C14AcylCoAMAT_VMAT/KmmtpC14AcylCoAMAT + C14EnoylCoAMAT_VMAT/KmmtpC14EnoylCoAMAT + C16AcylCoAMAT_VMAT/KmmtpC16AcylCoAMAT + C16EnoylCoAMAT_VMAT/KmmtpC16EnoylCoAMAT + C4AcetoacylCoAMAT_VMAT/KicrotC4AcetoacylCoA + C6AcylCoAMAT_VMAT/KmmtpC6AcylCoAMAT + C8AcylCoAMAT_VMAT/KmmtpC8AcylCoAMAT + C8EnoylCoAMAT_VMAT/KmmtpC8EnoylCoAMAT + 1))
	fRate31() = 0.81*Vmtp*(-AcetylCoAMAT_VMAT*C10AcylCoAMAT_VMAT*NADHMAT_VMAT/(Keqmtp*KmmtpC12EnoylCoAMAT*KmmtpCoAMAT*KmmtpNADMAT) + C12EnoylCoAMAT_VMAT*CoAMAT_VMAT*(-NADHMAT_VMAT + NADtMAT_VMAT)/(KmmtpC12EnoylCoAMAT*KmmtpCoAMAT*KmmtpNADMAT))/((1 + (-NADHMAT_VMAT + NADtMAT_VMAT)/KmmtpNADMAT + NADHMAT_VMAT/KmmtpNADHMAT)*(AcetylCoAMAT_VMAT/KmmtpAcetylCoAMAT + CoAMAT_VMAT/KmmtpCoAMAT + 1)*(C10AcylCoAMAT_VMAT/KmmtpC10AcylCoAMAT + C10EnoylCoAMAT_VMAT/KmmtpC10EnoylCoAMAT + C12AcylCoAMAT_VMAT/KmmtpC12AcylCoAMAT + C12EnoylCoAMAT_VMAT/KmmtpC12EnoylCoAMAT + C14AcylCoAMAT_VMAT/KmmtpC14AcylCoAMAT + C14EnoylCoAMAT_VMAT/KmmtpC14EnoylCoAMAT + C16AcylCoAMAT_VMAT/KmmtpC16AcylCoAMAT + C16EnoylCoAMAT_VMAT/KmmtpC16EnoylCoAMAT + C4AcetoacylCoAMAT_VMAT/KicrotC4AcetoacylCoA + C6AcylCoAMAT_VMAT/KmmtpC6AcylCoAMAT + C8AcylCoAMAT_VMAT/KmmtpC8AcylCoAMAT + C8EnoylCoAMAT_VMAT/KmmtpC8EnoylCoAMAT + 1))
	fRate32() = 0.73*Vmtp*(-AcetylCoAMAT_VMAT*C8AcylCoAMAT_VMAT*NADHMAT_VMAT/(Keqmtp*KmmtpC10EnoylCoAMAT*KmmtpCoAMAT*KmmtpNADMAT) + C10EnoylCoAMAT_VMAT*CoAMAT_VMAT*(-NADHMAT_VMAT + NADtMAT_VMAT)/(KmmtpC10EnoylCoAMAT*KmmtpCoAMAT*KmmtpNADMAT))/((1 + (-NADHMAT_VMAT + NADtMAT_VMAT)/KmmtpNADMAT + NADHMAT_VMAT/KmmtpNADHMAT)*(AcetylCoAMAT_VMAT/KmmtpAcetylCoAMAT + CoAMAT_VMAT/KmmtpCoAMAT + 1)*(C10AcylCoAMAT_VMAT/KmmtpC10AcylCoAMAT + C10EnoylCoAMAT_VMAT/KmmtpC10EnoylCoAMAT + C12AcylCoAMAT_VMAT/KmmtpC12AcylCoAMAT + C12EnoylCoAMAT_VMAT/KmmtpC12EnoylCoAMAT + C14AcylCoAMAT_VMAT/KmmtpC14AcylCoAMAT + C14EnoylCoAMAT_VMAT/KmmtpC14EnoylCoAMAT + C16AcylCoAMAT_VMAT/KmmtpC16AcylCoAMAT + C16EnoylCoAMAT_VMAT/KmmtpC16EnoylCoAMAT + C4AcetoacylCoAMAT_VMAT/KicrotC4AcetoacylCoA + C6AcylCoAMAT_VMAT/KmmtpC6AcylCoAMAT + C8AcylCoAMAT_VMAT/KmmtpC8AcylCoAMAT + C8EnoylCoAMAT_VMAT/KmmtpC8EnoylCoAMAT + 1))
	fRate33() = 0.34*Vmtp*(-AcetylCoAMAT_VMAT*C6AcylCoAMAT_VMAT*NADHMAT_VMAT/(Keqmtp*KmmtpC8EnoylCoAMAT*KmmtpCoAMAT*KmmtpNADMAT) + C8EnoylCoAMAT_VMAT*CoAMAT_VMAT*(-NADHMAT_VMAT + NADtMAT_VMAT)/(KmmtpC8EnoylCoAMAT*KmmtpCoAMAT*KmmtpNADMAT))/((1 + (-NADHMAT_VMAT + NADtMAT_VMAT)/KmmtpNADMAT + NADHMAT_VMAT/KmmtpNADHMAT)*(AcetylCoAMAT_VMAT/KmmtpAcetylCoAMAT + CoAMAT_VMAT/KmmtpCoAMAT + 1)*(C10AcylCoAMAT_VMAT/KmmtpC10AcylCoAMAT + C10EnoylCoAMAT_VMAT/KmmtpC10EnoylCoAMAT + C12AcylCoAMAT_VMAT/KmmtpC12AcylCoAMAT + C12EnoylCoAMAT_VMAT/KmmtpC12EnoylCoAMAT + C14AcylCoAMAT_VMAT/KmmtpC14AcylCoAMAT + C14EnoylCoAMAT_VMAT/KmmtpC14EnoylCoAMAT + C16AcylCoAMAT_VMAT/KmmtpC16AcylCoAMAT + C16EnoylCoAMAT_VMAT/KmmtpC16EnoylCoAMAT + C4AcetoacylCoAMAT_VMAT/KicrotC4AcetoacylCoA + C6AcylCoAMAT_VMAT/KmmtpC6AcylCoAMAT + C8AcylCoAMAT_VMAT/KmmtpC8AcylCoAMAT + C8EnoylCoAMAT_VMAT/KmmtpC8EnoylCoAMAT + 1))
	fRate34m() = 180000000.0
	fRate35() = 0.83*Keqcrot*KicrotC4AcetoacylCoA*KmcrotC4EnoylCoAMAT*KmmschadC4AcetoacylCoAMAT*KmmschadC6KetoacylCoAMAT*KmmschadNADHMAT*Vcrot*Vmschad/(1.0*C4AcetoacylCoAMAT_VMAT*Keqcrot*KmcrotC4EnoylCoAMAT*KmcrotC6EnoylCoAMAT*KmmschadC4AcetoacylCoAMAT*KmmschadC6KetoacylCoAMAT*KmmschadNADHMAT*NAD_VMAT*Vmschad + 0.83*C4AcetoacylCoAMAT_VMAT*KicrotC4AcetoacylCoA*KmcrotC4EnoylCoAMAT*KmmschadC6HydroxyacylCoAMAT*KmmschadC6KetoacylCoAMAT*KmmschadNADHMAT*Vcrot*(KmmschadNADMAT + NAD_VMAT) + 0.83*C4AcetoacylCoAMAT_VMAT*KicrotC4AcetoacylCoA*KmcrotC4EnoylCoAMAT*KmmschadC6HydroxyacylCoAMAT*KmmschadC6KetoacylCoAMAT*KmmschadNADMAT*NADHMAT_VMAT*Vcrot + 1.0*C4EnoylCoAMAT_VMAT*Keqcrot*KicrotC4AcetoacylCoA*KmcrotC6EnoylCoAMAT*KmmschadC4AcetoacylCoAMAT*KmmschadC6KetoacylCoAMAT*KmmschadNADHMAT*NAD_VMAT*Vmschad + 0.83*C6KetoacylCoAMAT_VMAT*KicrotC4AcetoacylCoA*KmcrotC4EnoylCoAMAT*KmmschadC4AcetoacylCoAMAT*KmmschadC6HydroxyacylCoAMAT*KmmschadNADHMAT*Vcrot*(KmmschadNADMAT + NAD_VMAT) + 0.83*C6KetoacylCoAMAT_VMAT*KicrotC4AcetoacylCoA*KmcrotC4EnoylCoAMAT*KmmschadC4AcetoacylCoAMAT*KmmschadC6HydroxyacylCoAMAT*KmmschadNADMAT*NADHMAT_VMAT*Vcrot + 1.0*Keqcrot*KicrotC4AcetoacylCoA*KmcrotC4EnoylCoAMAT*KmmschadC4AcetoacylCoAMAT*KmmschadC6KetoacylCoAMAT*KmmschadNADHMAT*NAD_VMAT*Vmschad*(C6EnoylCoAMAT_VMAT + KmcrotC6EnoylCoAMAT) + 0.83*KicrotC4AcetoacylCoA*KmcrotC4EnoylCoAMAT*KmmschadC4AcetoacylCoAMAT*KmmschadC6HydroxyacylCoAMAT*KmmschadC6KetoacylCoAMAT*KmmschadNADHMAT*Vcrot*(KmmschadNADMAT + NAD_VMAT) + 0.83*KicrotC4AcetoacylCoA*KmcrotC4EnoylCoAMAT*KmmschadC4AcetoacylCoAMAT*KmmschadC6HydroxyacylCoAMAT*KmmschadC6KetoacylCoAMAT*KmmschadNADMAT*NADHMAT_VMAT*Vcrot)
	fRate35m() = 0.83*KicrotC4AcetoacylCoA*KmcrotC4EnoylCoAMAT*KmmschadC4AcetoacylCoAMAT*KmmschadC6KetoacylCoAMAT*KmmschadNADHMAT*Vcrot*Vmschad/(Keqmschad*(1.0*C4AcetoacylCoAMAT_VMAT*Keqcrot*KmcrotC4EnoylCoAMAT*KmcrotC6EnoylCoAMAT*KmmschadC4AcetoacylCoAMAT*KmmschadC6KetoacylCoAMAT*KmmschadNADHMAT*NAD_VMAT*Vmschad + 0.83*C4AcetoacylCoAMAT_VMAT*KicrotC4AcetoacylCoA*KmcrotC4EnoylCoAMAT*KmmschadC6HydroxyacylCoAMAT*KmmschadC6KetoacylCoAMAT*KmmschadNADHMAT*Vcrot*(KmmschadNADMAT + NAD_VMAT) + 0.83*C4AcetoacylCoAMAT_VMAT*KicrotC4AcetoacylCoA*KmcrotC4EnoylCoAMAT*KmmschadC6HydroxyacylCoAMAT*KmmschadC6KetoacylCoAMAT*KmmschadNADMAT*NADHMAT_VMAT*Vcrot + 1.0*C4EnoylCoAMAT_VMAT*Keqcrot*KicrotC4AcetoacylCoA*KmcrotC6EnoylCoAMAT*KmmschadC4AcetoacylCoAMAT*KmmschadC6KetoacylCoAMAT*KmmschadNADHMAT*NAD_VMAT*Vmschad + 0.83*C6KetoacylCoAMAT_VMAT*KicrotC4AcetoacylCoA*KmcrotC4EnoylCoAMAT*KmmschadC4AcetoacylCoAMAT*KmmschadC6HydroxyacylCoAMAT*KmmschadNADHMAT*Vcrot*(KmmschadNADMAT + NAD_VMAT) + 0.83*C6KetoacylCoAMAT_VMAT*KicrotC4AcetoacylCoA*KmcrotC4EnoylCoAMAT*KmmschadC4AcetoacylCoAMAT*KmmschadC6HydroxyacylCoAMAT*KmmschadNADMAT*NADHMAT_VMAT*Vcrot + 0.83*KicrotC4AcetoacylCoA*KmcrotC4EnoylCoAMAT*KmmschadC4AcetoacylCoAMAT*KmmschadC6HydroxyacylCoAMAT*KmmschadC6KetoacylCoAMAT*KmmschadNADMAT*NADHMAT_VMAT*Vcrot + KicrotC4AcetoacylCoA*KmcrotC4EnoylCoAMAT*KmmschadC4AcetoacylCoAMAT*KmmschadC6KetoacylCoAMAT*KmmschadNADHMAT*(1.0*C6EnoylCoAMAT_VMAT*Keqcrot*NAD_VMAT*Vmschad + 1.0*Keqcrot*KmcrotC6EnoylCoAMAT*NAD_VMAT*Vmschad + 0.83*KmmschadC6HydroxyacylCoAMAT*KmmschadNADMAT*Vcrot + 0.83*KmmschadC6HydroxyacylCoAMAT*NAD_VMAT*Vcrot)))
	fRate36() = 0.67*Keqcrot*KicrotC4AcetoacylCoA*KmcrotC6EnoylCoAMAT*KmmschadC4AcetoacylCoAMAT*KmmschadC6KetoacylCoAMAT*KmmschadNADHMAT*Vcrot*Vmschad/(0.67*C4AcetoacylCoAMAT_VMAT*Keqcrot*KmcrotC4EnoylCoAMAT*KmcrotC6EnoylCoAMAT*KmmschadC4AcetoacylCoAMAT*KmmschadC6KetoacylCoAMAT*KmmschadNADHMAT*NAD_VMAT*Vmschad + 1.0*C4AcetoacylCoAMAT_VMAT*KicrotC4AcetoacylCoA*KmcrotC6EnoylCoAMAT*KmmschadC4HydroxyacylCoAMAT*KmmschadC6KetoacylCoAMAT*KmmschadNADHMAT*Vcrot*(KmmschadNADMAT + NAD_VMAT) + 1.0*C4AcetoacylCoAMAT_VMAT*KicrotC4AcetoacylCoA*KmcrotC6EnoylCoAMAT*KmmschadC4HydroxyacylCoAMAT*KmmschadC6KetoacylCoAMAT*KmmschadNADMAT*NADHMAT_VMAT*Vcrot + 0.67*C6EnoylCoAMAT_VMAT*Keqcrot*KicrotC4AcetoacylCoA*KmcrotC4EnoylCoAMAT*KmmschadC4AcetoacylCoAMAT*KmmschadC6KetoacylCoAMAT*KmmschadNADHMAT*NAD_VMAT*Vmschad + 1.0*C6KetoacylCoAMAT_VMAT*KicrotC4AcetoacylCoA*KmcrotC6EnoylCoAMAT*KmmschadC4AcetoacylCoAMAT*KmmschadC4HydroxyacylCoAMAT*KmmschadNADHMAT*Vcrot*(KmmschadNADMAT + NAD_VMAT) + 1.0*C6KetoacylCoAMAT_VMAT*KicrotC4AcetoacylCoA*KmcrotC6EnoylCoAMAT*KmmschadC4AcetoacylCoAMAT*KmmschadC4HydroxyacylCoAMAT*KmmschadNADMAT*NADHMAT_VMAT*Vcrot + 0.67*Keqcrot*KicrotC4AcetoacylCoA*KmcrotC6EnoylCoAMAT*KmmschadC4AcetoacylCoAMAT*KmmschadC6KetoacylCoAMAT*KmmschadNADHMAT*NAD_VMAT*Vmschad*(C4EnoylCoAMAT_VMAT + KmcrotC4EnoylCoAMAT) + 1.0*KicrotC4AcetoacylCoA*KmcrotC6EnoylCoAMAT*KmmschadC4AcetoacylCoAMAT*KmmschadC4HydroxyacylCoAMAT*KmmschadC6KetoacylCoAMAT*KmmschadNADHMAT*Vcrot*(KmmschadNADMAT + NAD_VMAT) + 1.0*KicrotC4AcetoacylCoA*KmcrotC6EnoylCoAMAT*KmmschadC4AcetoacylCoAMAT*KmmschadC4HydroxyacylCoAMAT*KmmschadC6KetoacylCoAMAT*KmmschadNADMAT*NADHMAT_VMAT*Vcrot)
	fRate36m() = 0.67*KicrotC4AcetoacylCoA*KmcrotC6EnoylCoAMAT*KmmschadC4AcetoacylCoAMAT*KmmschadC6KetoacylCoAMAT*KmmschadNADHMAT*Vcrot*Vmschad/(Keqmschad*(0.67*C4AcetoacylCoAMAT_VMAT*Keqcrot*KmcrotC4EnoylCoAMAT*KmcrotC6EnoylCoAMAT*KmmschadC4AcetoacylCoAMAT*KmmschadC6KetoacylCoAMAT*KmmschadNADHMAT*NAD_VMAT*Vmschad + 1.0*C4AcetoacylCoAMAT_VMAT*KicrotC4AcetoacylCoA*KmcrotC6EnoylCoAMAT*KmmschadC4HydroxyacylCoAMAT*KmmschadC6KetoacylCoAMAT*KmmschadNADHMAT*Vcrot*(KmmschadNADMAT + NAD_VMAT) + 1.0*C4AcetoacylCoAMAT_VMAT*KicrotC4AcetoacylCoA*KmcrotC6EnoylCoAMAT*KmmschadC4HydroxyacylCoAMAT*KmmschadC6KetoacylCoAMAT*KmmschadNADMAT*NADHMAT_VMAT*Vcrot + 0.67*C6EnoylCoAMAT_VMAT*Keqcrot*KicrotC4AcetoacylCoA*KmcrotC4EnoylCoAMAT*KmmschadC4AcetoacylCoAMAT*KmmschadC6KetoacylCoAMAT*KmmschadNADHMAT*NAD_VMAT*Vmschad + 1.0*C6KetoacylCoAMAT_VMAT*KicrotC4AcetoacylCoA*KmcrotC6EnoylCoAMAT*KmmschadC4AcetoacylCoAMAT*KmmschadC4HydroxyacylCoAMAT*KmmschadNADHMAT*Vcrot*(KmmschadNADMAT + NAD_VMAT) + 1.0*C6KetoacylCoAMAT_VMAT*KicrotC4AcetoacylCoA*KmcrotC6EnoylCoAMAT*KmmschadC4AcetoacylCoAMAT*KmmschadC4HydroxyacylCoAMAT*KmmschadNADMAT*NADHMAT_VMAT*Vcrot + 1.0*KicrotC4AcetoacylCoA*KmcrotC6EnoylCoAMAT*KmmschadC4AcetoacylCoAMAT*KmmschadC4HydroxyacylCoAMAT*KmmschadC6KetoacylCoAMAT*KmmschadNADMAT*NADHMAT_VMAT*Vcrot + KicrotC4AcetoacylCoA*KmcrotC6EnoylCoAMAT*KmmschadC4AcetoacylCoAMAT*KmmschadC6KetoacylCoAMAT*KmmschadNADHMAT*(0.67*C4EnoylCoAMAT_VMAT*Keqcrot*NAD_VMAT*Vmschad + 0.67*Keqcrot*KmcrotC4EnoylCoAMAT*NAD_VMAT*Vmschad + 1.0*KmmschadC4HydroxyacylCoAMAT*KmmschadNADMAT*Vcrot + 1.0*KmmschadC4HydroxyacylCoAMAT*NAD_VMAT*Vcrot)))
end functions
begin reaction rules
	vcpt1C16: 0  <-> Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~C16AcylCar,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~CYT,mat~0)@VCYT fRate0(),fRate0m() #Modifiers(C16AcylCoACYT, CarCYT, CoACYT, MalCoACYT, C16AcylCarCYT)
	vcactC16: Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~C16AcylCar,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~CYT,mat~0)@VCYT <-> Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~C16AcylCar,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT)@VMAT fRate1(),fRate1m() #Modifiers(CarMAT, CarCYT, C16AcylCarCYT, C16AcylCarMAT)
	vcactC14: Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~C14AcylCar,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~CYT,mat~0)@VCYT <-> Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~C14AcylCar,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT)@VMAT fRate2(),fRate2m() #Modifiers(CarMAT, CarCYT, C14AcylCarCYT, C14AcylCarMAT)
	vcactC12: Car(C10AcylCar~0,C12AcylCar~C12AcylCar,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~CYT,mat~0)@VCYT <-> Car(C10AcylCar~0,C12AcylCar~C12AcylCar,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT)@VMAT fRate3(),fRate3m() #Modifiers(CarMAT, CarCYT, C12AcylCarCYT, C12AcylCarMAT)
	vcactC10: Car(C10AcylCar~C10AcylCar,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~CYT,mat~0)@VCYT <-> Car(C10AcylCar~C10AcylCar,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT)@VMAT fRate4(),fRate4m() #Modifiers(CarMAT, CarCYT, C10AcylCarCYT, C10AcylCarMAT)
	vcactC8: Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~C8AcylCar,cyt~CYT,mat~0)@VCYT <-> Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~C8AcylCar,cyt~0,mat~MAT)@VMAT fRate5(),fRate5m() #Modifiers(CarMAT, CarCYT, C8AcylCarCYT, C8AcylCarMAT)
	vcactC6: Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~C6AcylCar,C8AcylCar~0,cyt~CYT,mat~0)@VCYT <-> Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~C6AcylCar,C8AcylCar~0,cyt~0,mat~MAT)@VMAT fRate6(),fRate6m() #Modifiers(CarMAT, CarCYT, C6AcylCarCYT, C6AcylCarMAT)
	vcactC4: Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~C4AcylCar,C6AcylCar~0,C8AcylCar~0,cyt~CYT,mat~0)@VCYT <-> Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~C4AcylCar,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT)@VMAT fRate7(),fRate7m() #Modifiers(CarMAT, CarCYT, C4AcylCarCYT, C4AcylCarMAT)
	vcpt2C16: Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~C16AcylCar,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT)@VMAT <-> C16AcylC(oamat~OAMAT)@VMAT fRate8(),fRate8m() #Modifiers(C14AcylCarMAT, C12AcylCarMAT, C10AcylCarMAT, C8AcylCarMAT, C6AcylCarMAT, C4AcylCarMAT, CoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, CarMAT, C16AcylCarMAT, C16AcylCoAMAT)
	vcpt2C14: Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~C14AcylCar,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT)@VMAT <-> C14AcylC(oamat~OAMAT)@VMAT fRate9(),fRate9m() #Modifiers(C16AcylCarMAT, C12AcylCarMAT, C10AcylCarMAT, C8AcylCarMAT, C6AcylCarMAT, C4AcylCarMAT, CoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, CarMAT, C14AcylCarMAT, C14AcylCoAMAT)
	vcpt2C12: Car(C10AcylCar~0,C12AcylCar~C12AcylCar,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT)@VMAT <-> C12AcylC(oamat~OAMAT)@VMAT fRate10(),fRate10m() #Modifiers(C16AcylCarMAT, C14AcylCarMAT, C10AcylCarMAT, C8AcylCarMAT, C6AcylCarMAT, C4AcylCarMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, CarMAT, C12AcylCarMAT, C12AcylCoAMAT)
	vcpt2C10: Car(C10AcylCar~C10AcylCar,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT)@VMAT <-> C10AcylC(oamat~OAMAT)@VMAT fRate11(),fRate11m() #Modifiers(C16AcylCarMAT, C14AcylCarMAT, C12AcylCarMAT, C8AcylCarMAT, C6AcylCarMAT, C4AcylCarMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, CarMAT, C10AcylCarMAT, C10AcylCoAMAT)
	vcpt2C8: Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~0,C8AcylCar~C8AcylCar,cyt~0,mat~MAT)@VMAT <-> C8AcylC(oamat~OAMAT)@VMAT fRate12(),fRate12m() #Modifiers(C16AcylCarMAT, C14AcylCarMAT, C12AcylCarMAT, C10AcylCarMAT, C6AcylCarMAT, C4AcylCarMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, CarMAT, C8AcylCarMAT, C8AcylCoAMAT)
	vcpt2C6: Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~0,C6AcylCar~C6AcylCar,C8AcylCar~0,cyt~0,mat~MAT)@VMAT <-> C6AcylC(oamat~OAMAT)@VMAT fRate13(),fRate13m() #Modifiers(C16AcylCarMAT, C14AcylCarMAT, C12AcylCarMAT, C10AcylCarMAT, C8AcylCarMAT, C4AcylCarMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C4AcylCoAMAT, CarMAT, C6AcylCarMAT, C6AcylCoAMAT)
	vcpt2C4: Car(C10AcylCar~0,C12AcylCar~0,C14AcylCar~0,C16AcylCar~0,C4AcylCar~C4AcylCar,C6AcylCar~0,C8AcylCar~0,cyt~0,mat~MAT)@VMAT <-> C4AcylC(coa,oamat~OAMAT)@VMAT fRate14(),fRate14m() #Modifiers(C16AcylCarMAT, C14AcylCarMAT, C12AcylCarMAT, C10AcylCarMAT, C8AcylCarMAT, C6AcylCarMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, CarMAT, C4AcylCarMAT, C4AcylCoAMAT)
	vvlcadC16_reactants_0: 0  -> C16AcylC(oamat~OAMAT)@VMAT -1*(fRate15()) #Modifiers(C14AcylCoAMAT, C12AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C16AcylCoAMAT, C16EnoylCoAMAT, FADHMAT)
	vvlcadC16_products_0: 0  -> CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~C16EnoylCoAMAT,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0)@VMAT fRate15() #Modifiers(C14AcylCoAMAT, C12AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C16AcylCoAMAT, C16EnoylCoAMAT, FADHMAT)
	vvlcadC16_products_1: 0  -> FADHMAT()@VMAT fRate15() #Modifiers(C14AcylCoAMAT, C12AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C16AcylCoAMAT, C16EnoylCoAMAT, FADHMAT)
	vvlcadC14_reactants_0: 0  -> C14AcylC(oamat~OAMAT)@VMAT -1*(fRate16()) #Modifiers(C16AcylCoAMAT, C12AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, C14AcylCoAMAT, C14EnoylCoAMAT, FADHMAT)
	vvlcadC14_products_0: 0  -> CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~C14EnoylCoAMAT,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0)@VMAT fRate16() #Modifiers(C16AcylCoAMAT, C12AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, C14AcylCoAMAT, C14EnoylCoAMAT, FADHMAT)
	vvlcadC14_products_1: 0  -> FADHMAT()@VMAT fRate16() #Modifiers(C16AcylCoAMAT, C12AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, C14AcylCoAMAT, C14EnoylCoAMAT, FADHMAT)
	vvlcadC12_reactants_0: 0  -> C12AcylC(oamat~OAMAT)@VMAT -1*(fRate17()) #Modifiers(C16AcylCoAMAT, C14AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12AcylCoAMAT, C12EnoylCoAMAT, FADHMAT)
	vvlcadC12_products_0: 0  -> CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~C12EnoylCoAMAT,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0)@VMAT fRate17() #Modifiers(C16AcylCoAMAT, C14AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12AcylCoAMAT, C12EnoylCoAMAT, FADHMAT)
	vvlcadC12_products_1: 0  -> FADHMAT()@VMAT fRate17() #Modifiers(C16AcylCoAMAT, C14AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12AcylCoAMAT, C12EnoylCoAMAT, FADHMAT)
	vlcadC16_reactants_0: 0  -> C16AcylC(oamat~OAMAT)@VMAT -1*(fRate18()) #Modifiers(C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C16AcylCoAMAT, C16EnoylCoAMAT, FADHMAT)
	vlcadC16_products_0: 0  -> CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~C16EnoylCoAMAT,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0)@VMAT fRate18() #Modifiers(C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C16AcylCoAMAT, C16EnoylCoAMAT, FADHMAT)
	vlcadC16_products_1: 0  -> FADHMAT()@VMAT fRate18() #Modifiers(C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C16AcylCoAMAT, C16EnoylCoAMAT, FADHMAT)
	vlcadC14_reactants_0: 0  -> C14AcylC(oamat~OAMAT)@VMAT -1*(fRate19()) #Modifiers(C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C14AcylCoAMAT, C14EnoylCoAMAT, FADHMAT)
	vlcadC14_products_0: 0  -> CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~C14EnoylCoAMAT,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0)@VMAT fRate19() #Modifiers(C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C14AcylCoAMAT, C14EnoylCoAMAT, FADHMAT)
	vlcadC14_products_1: 0  -> FADHMAT()@VMAT fRate19() #Modifiers(C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C14AcylCoAMAT, C14EnoylCoAMAT, FADHMAT)
	vlcadC12_reactants_0: 0  -> C12AcylC(oamat~OAMAT)@VMAT -1*(fRate20()) #Modifiers(C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C12AcylCoAMAT, FADHMAT)
	vlcadC12_products_0: 0  -> CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~C12EnoylCoAMAT,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0)@VMAT fRate20() #Modifiers(C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C12AcylCoAMAT, FADHMAT)
	vlcadC12_products_1: 0  -> FADHMAT()@VMAT fRate20() #Modifiers(C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C14EnoylCoAMAT, C16EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C12AcylCoAMAT, FADHMAT)
	vlcadC10_reactants_0: 0  -> C10AcylC(oamat~OAMAT)@VMAT -1*(fRate21()) #Modifiers(C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, C10AcylCoAMAT, C10EnoylCoAMAT, FADHMAT)
	vlcadC10_products_0: 0  -> CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~C10EnoylCoAMAT,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0)@VMAT fRate21() #Modifiers(C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, C10AcylCoAMAT, C10EnoylCoAMAT, FADHMAT)
	vlcadC10_products_1: 0  -> FADHMAT()@VMAT fRate21() #Modifiers(C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, FADtMAT, C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, C10AcylCoAMAT, C10EnoylCoAMAT, FADHMAT)
	vmcadC12_reactants_0: 0  -> C12AcylC(oamat~OAMAT)@VMAT -1*(fRate22()) #Modifiers(C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C12AcylCoAMAT, C12EnoylCoAMAT, FADHMAT)
	vmcadC12_products_0: 0  -> CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~C12EnoylCoAMAT,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0)@VMAT fRate22() #Modifiers(C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C12AcylCoAMAT, C12EnoylCoAMAT, FADHMAT)
	vmcadC12_products_1: 0  -> FADHMAT()@VMAT fRate22() #Modifiers(C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C12AcylCoAMAT, C12EnoylCoAMAT, FADHMAT)
	vmcadC10_reactants_0: 0  -> C10AcylC(oamat~OAMAT)@VMAT -1*(fRate23()) #Modifiers(C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C10AcylCoAMAT, C10EnoylCoAMAT, FADHMAT)
	vmcadC10_products_0: 0  -> CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~C10EnoylCoAMAT,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0)@VMAT fRate23() #Modifiers(C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C10AcylCoAMAT, C10EnoylCoAMAT, FADHMAT)
	vmcadC10_products_1: 0  -> FADHMAT()@VMAT fRate23() #Modifiers(C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C10AcylCoAMAT, C10EnoylCoAMAT, FADHMAT)
	vmcadC8_reactants_0: 0  -> C8AcylC(oamat~OAMAT)@VMAT -1*(fRate24()) #Modifiers(C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C8AcylCoAMAT, C8EnoylCoAMAT, FADHMAT)
	vmcadC8_products_0: 0  -> CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~C8EnoylCoAMAT,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0)@VMAT fRate24() #Modifiers(C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C8AcylCoAMAT, C8EnoylCoAMAT, FADHMAT)
	vmcadC8_products_1: 0  -> FADHMAT()@VMAT fRate24() #Modifiers(C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, C8AcylCoAMAT, C8EnoylCoAMAT, FADHMAT)
	vmcadC6_reactants_0: 0  -> C6AcylC(oamat~OAMAT)@VMAT -1*(fRate25()) #Modifiers(C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C4EnoylCoAMAT, C6AcylCoAMAT, C6EnoylCoAMAT, FADHMAT)
	vmcadC6_products_0: 0  -> CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~C6EnoylCoAMAT,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0)@VMAT fRate25() #Modifiers(C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C4EnoylCoAMAT, C6AcylCoAMAT, C6EnoylCoAMAT, FADHMAT)
	vmcadC6_products_1: 0  -> FADHMAT()@VMAT fRate25() #Modifiers(C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C4AcylCoAMAT, FADtMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, C4EnoylCoAMAT, C6AcylCoAMAT, C6EnoylCoAMAT, FADHMAT)
	vscadC4_reactants_0: 0  -> C4AcylC(coa,oamat~OAMAT)@VMAT -1*(fRate26()) #Modifiers(C6AcylCoAMAT, FADtMAT, C6EnoylCoAMAT, C4AcylCoAMAT, C4EnoylCoAMAT, FADHMAT)
	vscadC4_products_0: 0  -> CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~C4EnoylCoAMAT,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0)@VMAT fRate26() #Modifiers(C6AcylCoAMAT, FADtMAT, C6EnoylCoAMAT, C4AcylCoAMAT, C4EnoylCoAMAT, FADHMAT)
	vscadC4_products_1: 0  -> FADHMAT()@VMAT fRate26() #Modifiers(C6AcylCoAMAT, FADtMAT, C6EnoylCoAMAT, C4AcylCoAMAT, C4EnoylCoAMAT, FADHMAT)
	vmckatC6: CoA(AcetylCoAMAT~AcetylCoAMAT,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc!863,coa,cyt~0,mat~0)@VMAT.C4AcylC(coa!863,oamat~OAMAT)@VMAT <-> C4AcylC(coa,oamat~OAMAT)@VMAT + CoA(AcetylCoAMAT~AcetylCoAMAT,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0)@VMAT fRate27(),fRate27m() #Modifiers(C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C4AcetoacylCoAMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, AcetylCoAMAT, C4AcylCoAMAT, C6KetoacylCoAMAT)
	vmckatC4: CoA(AcetylCoAMAT~AcetylCoAMAT,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa!864,cyt~0,mat~0)@VMAT.CoA(AcetylCoAMAT~AcetylCoAMAT,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa!864,cyt~0,mat~0)@VMAT <-> CoA(AcetylCoAMAT~AcetylCoAMAT,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0)@VMAT + CoA(AcetylCoAMAT~AcetylCoAMAT,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0)@VMAT fRate28(),fRate28m() #Modifiers(C16KetoacylCoAMAT, C14KetoacylCoAMAT, C12KetoacylCoAMAT, C10KetoacylCoAMAT, C8KetoacylCoAMAT, C6KetoacylCoAMAT, CoAMAT, C4AcylCoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, AcetylCoAMAT, C4AcetoacylCoAMAT)
	vmtpC16_reactants_0: 0  -> CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~C16EnoylCoAMAT,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0)@VMAT -1*(fRate29()) #Modifiers(C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, AcetylCoAMAT, C14AcylCoAMAT, C16EnoylCoAMAT, NADHMAT)
	vmtpC16_products_0: 0  -> C14AcylC(oamat~OAMAT)@VMAT fRate29() #Modifiers(C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, AcetylCoAMAT, C14AcylCoAMAT, C16EnoylCoAMAT, NADHMAT)
	vmtpC16_products_1: 0  -> CoA(AcetylCoAMAT~AcetylCoAMAT,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0)@VMAT fRate29() #Modifiers(C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, AcetylCoAMAT, C14AcylCoAMAT, C16EnoylCoAMAT, NADHMAT)
	vmtpC16_products_2: 0  -> NAD(hmat~HMAT)@VMAT fRate29() #Modifiers(C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, AcetylCoAMAT, C14AcylCoAMAT, C16EnoylCoAMAT, NADHMAT)
	vmtpC14_reactants_0: 0  -> CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~C14EnoylCoAMAT,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0)@VMAT -1*(fRate30()) #Modifiers(C16EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, AcetylCoAMAT, C12AcylCoAMAT, C14EnoylCoAMAT, NADHMAT)
	vmtpC14_products_0: 0  -> C12AcylC(oamat~OAMAT)@VMAT fRate30() #Modifiers(C16EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, AcetylCoAMAT, C12AcylCoAMAT, C14EnoylCoAMAT, NADHMAT)
	vmtpC14_products_1: 0  -> CoA(AcetylCoAMAT~AcetylCoAMAT,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0)@VMAT fRate30() #Modifiers(C16EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, AcetylCoAMAT, C12AcylCoAMAT, C14EnoylCoAMAT, NADHMAT)
	vmtpC14_products_2: 0  -> NAD(hmat~HMAT)@VMAT fRate30() #Modifiers(C16EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, AcetylCoAMAT, C12AcylCoAMAT, C14EnoylCoAMAT, NADHMAT)
	vmtpC12_reactants_0: 0  -> CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~C12EnoylCoAMAT,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0)@VMAT -1*(fRate31()) #Modifiers(C16EnoylCoAMAT, C14EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, AcetylCoAMAT, C10AcylCoAMAT, C12EnoylCoAMAT, NADHMAT)
	vmtpC12_products_0: 0  -> C10AcylC(oamat~OAMAT)@VMAT fRate31() #Modifiers(C16EnoylCoAMAT, C14EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, AcetylCoAMAT, C10AcylCoAMAT, C12EnoylCoAMAT, NADHMAT)
	vmtpC12_products_1: 0  -> CoA(AcetylCoAMAT~AcetylCoAMAT,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0)@VMAT fRate31() #Modifiers(C16EnoylCoAMAT, C14EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, AcetylCoAMAT, C10AcylCoAMAT, C12EnoylCoAMAT, NADHMAT)
	vmtpC12_products_2: 0  -> NAD(hmat~HMAT)@VMAT fRate31() #Modifiers(C16EnoylCoAMAT, C14EnoylCoAMAT, C10EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C8AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, AcetylCoAMAT, C10AcylCoAMAT, C12EnoylCoAMAT, NADHMAT)
	vmtpC10_reactants_0: 0  -> CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~C10EnoylCoAMAT,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0)@VMAT -1*(fRate32()) #Modifiers(C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, AcetylCoAMAT, C10EnoylCoAMAT, C8AcylCoAMAT, NADHMAT)
	vmtpC10_products_0: 0  -> C8AcylC(oamat~OAMAT)@VMAT fRate32() #Modifiers(C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, AcetylCoAMAT, C10EnoylCoAMAT, C8AcylCoAMAT, NADHMAT)
	vmtpC10_products_1: 0  -> CoA(AcetylCoAMAT~AcetylCoAMAT,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0)@VMAT fRate32() #Modifiers(C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, AcetylCoAMAT, C10EnoylCoAMAT, C8AcylCoAMAT, NADHMAT)
	vmtpC10_products_2: 0  -> NAD(hmat~HMAT)@VMAT fRate32() #Modifiers(C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C8EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C6AcylCoAMAT, C4AcetoacylCoAMAT, AcetylCoAMAT, C10EnoylCoAMAT, C8AcylCoAMAT, NADHMAT)
	vmtpC8_reactants_0: 0  -> CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~C8EnoylCoAMAT,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0)@VMAT -1*(fRate33()) #Modifiers(C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C4AcetoacylCoAMAT, AcetylCoAMAT, C6AcylCoAMAT, C8EnoylCoAMAT, NADHMAT)
	vmtpC8_products_0: 0  -> C6AcylC(oamat~OAMAT)@VMAT fRate33() #Modifiers(C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C4AcetoacylCoAMAT, AcetylCoAMAT, C6AcylCoAMAT, C8EnoylCoAMAT, NADHMAT)
	vmtpC8_products_1: 0  -> CoA(AcetylCoAMAT~AcetylCoAMAT,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0)@VMAT fRate33() #Modifiers(C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C4AcetoacylCoAMAT, AcetylCoAMAT, C6AcylCoAMAT, C8EnoylCoAMAT, NADHMAT)
	vmtpC8_products_2: 0  -> NAD(hmat~HMAT)@VMAT fRate33() #Modifiers(C16EnoylCoAMAT, C14EnoylCoAMAT, C12EnoylCoAMAT, C10EnoylCoAMAT, NADtMAT, CoAMAT, C16AcylCoAMAT, C14AcylCoAMAT, C12AcylCoAMAT, C10AcylCoAMAT, C8AcylCoAMAT, C4AcetoacylCoAMAT, AcetylCoAMAT, C6AcylCoAMAT, C8EnoylCoAMAT, NADHMAT)
	vacesink: CoA(AcetylCoAMAT~AcetylCoAMAT,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0)@VMAT <-> 0  r35_Ksacesink,fRate34m() #Modifiers(AcetylCoAMAT)
	reaction_1: CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~C6EnoylCoAMAT,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0)@VMAT + NAD(hmat~0)@VMAT <-> CoA(AcetylCoAMAT~AcetylCoAMAT,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc!863,coa,cyt~0,mat~0)@VMAT.C4AcylC(coa!863,oamat~OAMAT)@VMAT + NAD(hmat~HMAT)@VMAT fRate35(),fRate35m() #Modifiers(C4AcetoacylCoAMAT, C4EnoylCoAMAT, C6EnoylCoAMAT, species_1, C6KetoacylCoAMAT, NADHMAT)
	reaction_2: CoA(AcetylCoAMAT~0,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~C4EnoylCoAMAT,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa,cyt~0,mat~0)@VMAT + NAD(hmat~0)@VMAT <-> CoA(AcetylCoAMAT~AcetylCoAMAT,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa!864,cyt~0,mat~0)@VMAT.CoA(AcetylCoAMAT~AcetylCoAMAT,C10EnoylCoAMAT~0,C10HydroxyacylCoAMAT~0,C10KetoacylCoAMAT~0,C12EnoylCoAMAT~0,C12HydroxyacylCoAMAT~0,C12KetoacylCoAMAT~0,C14EnoylCoAMAT~0,C14HydroxyacylCoAMAT~0,C14KetoacylCoAMAT~0,C16AcylCoACYT~0,C16EnoylCoAMAT~0,C16HydroxyacylCoAMAT~0,C16KetoacylCoAMAT~0,C4EnoylCoAMAT~0,C4HydroxyacylCoAMAT~0,C6EnoylCoAMAT~0,C6HydroxyacylCoAMAT~0,C8EnoylCoAMAT~0,C8HydroxyacylCoAMAT~0,C8KetoacylCoAMAT~0,CoAMATt~0,MalCoACYT~0,c4acylc,coa!864,cyt~0,mat~0)@VMAT + NAD(hmat~HMAT)@VMAT fRate36(),fRate36m() #Modifiers(C6KetoacylCoAMAT, C6EnoylCoAMAT, C4EnoylCoAMAT, species_1, C4AcetoacylCoAMAT, NADHMAT)
end reaction rules
end model
