###
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/19423234']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0042596', 'http://identifiers.org/efo/0004262']
#@BQB_HAS_PROPERTY:['http://identifiers.org/biomodels.db/MODEL1203070000']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000836', 'http://identifiers.org/biomodels.db/MODEL1203070000']
#@creatorEmail:''
#@creatorName:'Sharif Shohan Mohammad Umer Sharif Shohan'
#@notes:'This is an atomized translation of an SBML model created on 14/08/2021. The original model has 2 molecules and 0 reactions. The translated model has 2 molecules and 2 rules'
###
begin model
begin parameters
	alpha 6.0
	beta 2.8
	delta 1.0
	C 10.0
	gamma 0
end parameters
begin molecule types
	panic_intensity()
	protectionplprevention_intensity()
end molecule types
begin seed species
	panic_intensity() 6.022000000000001e+22 # 0.1mol/L * 6.022e23/mol *1.0L #panic_intensity #S
	protectionplprevention_intensity() 6.022000000000001e+22 #original 0.1mol/L  #protectionplprevention_intensity #P
end seed species
begin observables
	Species panic_intensity panic_intensity() #panic_intensity
	Species protectionplprevention_intensity protectionplprevention_intensity() #protection+prevention_intensity
end observables
begin functions
	arRateP() = protectionplprevention_intensity*(delta*panic_intensity - gamma)
	arRateS() = panic_intensity*(alpha*(1 - panic_intensity/C) - beta*protectionplprevention_intensity)
end functions
begin reaction rules
	0  -> panic_intensity() arRateS #rateLaw
	0  -> protectionplprevention_intensity() arRateP #rateLaw
end reaction rules
end model
