###
#@BQB_HAS_PROPERTY:['http://identifiers.org/ncit/C25966', 'http://identifiers.org/biomodels.teddy/TEDDY_0000006', 'http://identifiers.org/mamo/MAMO_0000089']
#@BQB_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/30385313']
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1911010001', 'http://identifiers.org/biomodels.db/BIOMD0000000841']
#@creatorEmail:'johannes.p.meyer@gmail.com'
#@creatorName:'Meyer Johannes'
#@notes:'This is an atomized translation of an SBML model created on 14/08/2021. The original model has 4 molecules and 11 reactions. The translated model has 4 molecules and 11 rules'
###
begin model
begin parameters
	alpha_C 1.0
	delta_C 0.01
	alpha_F 1.0
	delta_F 0.1
	alpha_M 1.0
	delta_M 1.0
	k_P 10.0
	delta_P 0.1
	k_CM 10.0
	k_MF 0.1
	beta_FM 200.0
	gamma_FM 100.0
	n 8.0
	tau1 0.5
	tau2 0.5
end parameters
begin molecule types
	#^ bqbiol:is ncit:C17207
	P()
	#^ bqbiol:is ncit:C813
	F()
	#^ bqbiol:is ncit:C25966
	M()
	#^ bqbiol:isVersionOf ncit:C25966
	C()
end molecule types
begin seed species
end seed species
begin observables
	Species C C() #C
	Species M M() #M
	Species F F() #F
	Species P P() #P
end observables
begin functions
	fRate8() = beta_FM/((gamma_FM/delay(P, tau1))^n + 1.0)
	fRate10() = k_P*delay(F, tau2)
end functions
begin reaction rules
	Sponge_Production_Basal: 0  -> C() alpha_C
	miRNA_Production_Basal: 0  -> M() alpha_M
	TF_mRNA_Production_Basal: 0  -> F() alpha_F
	Sponge_Degradation: C() -> 0  delta_C
	miRNA_Degradation: M() -> 0  delta_M
	TF_mRNA_Degradation: F() -> 0  delta_F
	Sponge_Inhibition_miRNA: M() + C() -> 0  k_CM
	TF_mRNA_Inhibition_miRNA: M() + F() -> 0  k_MF
	miRNA_Activation_Transcription_Factor: 0  -> M() fRate8() #Modifiers(P)
	TF_Protein_Degradation: P() -> 0  delta_P
	TF_Protein_Translation: 0  -> P() fRate10() #Modifiers(F)
end reaction rules
end model
