###
#@BQM_IS_INSTANCE_OF:['http://identifiers.org/bto/BTO:0000671', 'http://identifiers.org/go/GO:0038166', 'http://identifiers.org/go/GO:0007178', 'http://identifiers.org/taxonomy/9606', 'http://identifiers.org/biomodels.db/MODEL1012080000']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/go/GO:0038166', 'http://identifiers.org/pubmed/22735336', 'http://identifiers.org/go/GO:0007178']
#@BQB_IS:['http://identifiers.org/biomodels.db/MODEL1012080000']
#@BQB_OCCURS_IN:['http://identifiers.org/bto/BTO:0000671']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000842', 'http://identifiers.org/biomodels.db/MODEL1012080000']
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 21 molecules and 26 reactions. The translated model has 8 molecules and 26 rules'
###
begin model
begin parameters
	k0 0.000311
	k1 0.0178
	k2 7.6
	k3 4.63
	k4 0.0787
	k5 2.65
	k6 5.0985
	k7 0.461
	k8 1.77
	k9 3.04
	k10 2.27
	k11 2.61
	k12 2.59
	k13 0.00619
	k14 0.0311
	k15 6.54e-05
	k16 0.0723
	k17 0.0665
	k18 0.59
	k19 0.205
	k20 1.04
	k21 0.00042
	k22 14.44
	k23 1.05
	k24 0.347
	k25 0.762
	GRK23 0.899447579
	GRK56 1.5180818
	GRK23_si 0.478865092
	GRK56_si 0.00103512491
	P0_Ro 0.00173556731
	P0_a_Ro 2.09075206e-05
	barr2_0_si 0.000112306963
	nDAG 4.11974423
	nPKC 7.20901786
	GRK2_3 5.4164276800000006e+23 #original 0.89944mol/L
	GRK5_6 9.141396000000001e+23 #original 1.518mol/L
	pERK 1.8066e+22 #original 0.03mol/L
end parameters
begin molecule types
	#^ bqbiol:hasPart uniprot:P01019, uniprot:P30556
	HR(_p1~_P1~0,_p2~_P2~0,b_arrestin1,b_arrestin2)
	#^ bqbiol:isVersionOf uniprot:P27361
	ERK(b_p~B_P~0,gp_p~GP_P~0)
	#^ bqbiol:isVersionOf uniprot:P63092
	Gp(_a~_A~0)
	#^ bqbiol:isVersionOf uniprot:P17252
	PKC(_a~_A~0)
	#^ bqbiol:is uniprot:P49407
	b_arrestin1(hr)
	#^ bqbiol:is chebi:CHEBI:83417
	PIP2()
	#^ bqbiol:isVersionOf chebi:CHEBI:17962
	DAG()
	#^ bqbiol:hasVersion uniprot:P32121
	b_arrestin2(hr)
end molecule types
begin seed species
	HR(_p1~0,_p2~0,b_arrestin1,b_arrestin2) 4.8176e+22 # 0.08mol/L * 6.022e23/mol *1.0L #HR #HR
	Gp(_a~0) 3.4319378000000004e+25 #original 56.99mol/L #Gp #G
	ERK(b_p~0,gp_p~0) 2.5551346e+24 #original 4.243mol/L #ERK #ERK
	PIP2() 6.0039340000000004e+23 #original 0.997mol/L #PIP2 #PIP2
	DAG() 5.4198e+21 #original 0.009mol/L #DAG #DAG
	PKC(_a~0) 5.3246524e+24 #original 8.842mol/L #PKC #PKC
	PKC(_a~_A) 1.2044e+21 #original 0.002mol/L #PKC_a #PKC_a
	ERK(b_p~0,gp_p~GP_P) 9.033e+21 #original 0.015mol/L #Gp_pERK #GpERK
	ERK(b_p~B_P,gp_p~0) 9.033e+21 #original 0.015mol/L #b_pERK #bpERK
	b_arrestin1(hr) 5.166876e+23 #original 0.858mol/L #b_arrestin1 #barr1
	b_arrestin2(hr) 2.908626e+23 #original 0.483mol/L #b_arrestin2 #barr2
end seed species
begin observables
	Species HR HR(_p1~0,_p2~0,b_arrestin1,b_arrestin2) #HR
	Species Gp Gp(_a~0) #Gp
	Species ERK ERK(b_p~0,gp_p~0) #ERK
	Species PIP2 PIP2() #PIP2
	Species DAG DAG() #DAG
	Species PKC PKC(_a~0) #PKC
	Species PKC_a PKC(_a~_A) #PKC_a
	Species Gp_pERK ERK(b_p~0,gp_p~GP_P) #Gp_pERK
	Species b_pERK ERK(b_p~B_P,gp_p~0) #b_pERK
	Species b_arrestin1 b_arrestin1(hr) #b-arrestin1
	Species b_arrestin2 b_arrestin2(hr) #b-arrestin2
	Species Gp_a Gp(_a~_A) #Gp_a
	Species HR_P1 HR(_p1~_P1,_p2~0,b_arrestin1,b_arrestin2) #HR-P1
	Species HR_P1_b_arrestin1 HR(_p1~_P1,_p2~0,b_arrestin1!64,b_arrestin2).b_arrestin1(hr!64) #HR-P1-b-arrestin1
	Species HR_P1_b_arrestin2 HR(_p1~_P1,_p2~0,b_arrestin1,b_arrestin2!63).b_arrestin2(hr!63) #HR-P1-b-arrestin2
	Species HR_P2 HR(_p1~0,_p2~_P2,b_arrestin1,b_arrestin2) #HR-P2
	Species HR_b_arrestin2 HR(_p1~0,_p2~0,b_arrestin1,b_arrestin2!63).b_arrestin2(hr!63) #HR_b-arrestin2
	Species HR_P2_b_arrestin2 HR(_p1~0,_p2~_P2,b_arrestin1,b_arrestin2!63).b_arrestin2(hr!63) #HR-P2-b-arrestin2
end observables
begin functions
	pERK_ar() = Gp_pERK + b_pERK
	fRate10() = GRK23*k10
	fRate17() = GRK56*k18
end functions
begin reaction rules
	R_1: Gp(_a~0) -> Gp(_a~_A) k0 #Modifiers(G)
	R_2: Gp(_a~0) + HR(_p1~_P1,_p2~0,b_arrestin1,b_arrestin2) -> Gp(_a~_A) + HR(_p1~_P1,_p2~0,b_arrestin1,b_arrestin2) k1 #Modifiers(G, HRP1)
	R_3: Gp(_a~0) + HR(_p1~0,_p2~0,b_arrestin1,b_arrestin2) -> Gp(_a~_A) + HR(_p1~0,_p2~0,b_arrestin1,b_arrestin2) k2 #Modifiers(G, HR)
	R_4: Gp(_a~_A) + PIP2() -> DAG() + Gp(_a~_A) k3 #Modifiers(G_a, PIP2)
	R_5: DAG() + PKC(_a~0) -> DAG() + PKC(_a~_A) k4 #Modifiers(DAG, PKC)
	R_6: ERK(b_p~0,gp_p~0) + PKC(_a~_A) -> ERK(b_p~0,gp_p~GP_P) + PKC(_a~_A) k5 #Modifiers(ERK, PKC_a)
	R_7: Gp(_a~_A) -> Gp(_a~0) k6 #Modifiers(G_a)
	R_8: DAG() -> PIP2() k7 #Modifiers(DAG)
	R_9: PKC(_a~_A) -> PKC(_a~0) k8 #Modifiers(PKC_a)
	R_10: ERK(b_p~0,gp_p~GP_P) -> ERK(b_p~0,gp_p~0) k9 #Modifiers(GpERK)
	R_11: HR(_p1~0,_p2~0,b_arrestin1,b_arrestin2) -> HR(_p1~_P1,_p2~0,b_arrestin1,b_arrestin2) fRate10() #Modifiers(GRK2_3)
	R_12: b_arrestin1(hr) + HR(_p1~_P1,_p2~0,b_arrestin1,b_arrestin2) -> HR(_p1~_P1,_p2~0,b_arrestin1!64,b_arrestin2).b_arrestin1(hr!64) k11 #Modifiers(barr1, HRP1)
	R_13: HR(_p1~_P1,_p2~0,b_arrestin1!64,b_arrestin2).b_arrestin1(hr!64) -> b_arrestin1(hr) + HR(_p1~_P1,_p2~0,b_arrestin1,b_arrestin2) k13 #Modifiers(Hbarr1RP1)
	R_14: b_arrestin2(hr) + HR(_p1~_P1,_p2~0,b_arrestin1,b_arrestin2) -> HR(_p1~_P1,_p2~0,b_arrestin1,b_arrestin2!63).b_arrestin2(hr!63) k12 #Modifiers(barr2, HRP1)
	R_15: HR(_p1~_P1,_p2~0,b_arrestin1,b_arrestin2!63).b_arrestin2(hr!63) -> b_arrestin2(hr) + HR(_p1~_P1,_p2~0,b_arrestin1,b_arrestin2) k14 #Modifiers(Hbarr2RP1)
	R_16: HR(_p1~_P1,_p2~0,b_arrestin1!64,b_arrestin2).b_arrestin1(hr!64) -> b_arrestin1(hr) + HR(_p1~0,_p2~0,b_arrestin1,b_arrestin2) k15 #Modifiers(Hbarr1RP1)
	R_17: HR(_p1~_P1,_p2~0,b_arrestin1,b_arrestin2!63).b_arrestin2(hr!63) -> b_arrestin2(hr) + HR(_p1~0,_p2~0,b_arrestin1,b_arrestin2) k16 #Modifiers(Hbarr2RP1)
	R_18: HR(_p1~0,_p2~0,b_arrestin1,b_arrestin2) -> HR(_p1~0,_p2~_P2,b_arrestin1,b_arrestin2) fRate17() #Modifiers(GRK5_6)
	R_19: HR(_p1~0,_p2~_P2,b_arrestin1,b_arrestin2) -> HR(_p1~0,_p2~0,b_arrestin1,b_arrestin2) k17 #Modifiers(HRP2)
	R_20: b_arrestin2(hr) + HR(_p1~0,_p2~0,b_arrestin1,b_arrestin2) -> HR(_p1~0,_p2~0,b_arrestin1,b_arrestin2!63).b_arrestin2(hr!63) k19 #Modifiers(barr2, HR)
	R_21: HR(_p1~0,_p2~0,b_arrestin1,b_arrestin2!63).b_arrestin2(hr!63) -> b_arrestin2(hr) + HR(_p1~0,_p2~0,b_arrestin1,b_arrestin2) k23 #Modifiers(HRbarr2)
	R_22: b_arrestin2(hr) + HR(_p1~0,_p2~_P2,b_arrestin1,b_arrestin2) -> HR(_p1~0,_p2~_P2,b_arrestin1,b_arrestin2!63).b_arrestin2(hr!63) k20 #Modifiers(barr2, HRP2)
	R_23: HR(_p1~0,_p2~_P2,b_arrestin1,b_arrestin2!63).b_arrestin2(hr!63) -> b_arrestin2(hr) + HR(_p1~0,_p2~_P2,b_arrestin1,b_arrestin2) k24 #Modifiers(Hbarr2RP2)
	R_24: ERK(b_p~0,gp_p~0) + HR(_p1~0,_p2~0,b_arrestin1,b_arrestin2!63).b_arrestin2(hr!63) -> ERK(b_p~B_P,gp_p~0) + HR(_p1~0,_p2~0,b_arrestin1,b_arrestin2!63).b_arrestin2(hr!63) k21 #Modifiers(ERK, HRbarr2)
	R_25: ERK(b_p~0,gp_p~0) + HR(_p1~0,_p2~_P2,b_arrestin1,b_arrestin2!63).b_arrestin2(hr!63) -> ERK(b_p~B_P,gp_p~0) + HR(_p1~0,_p2~_P2,b_arrestin1,b_arrestin2!63).b_arrestin2(hr!63) k22 #Modifiers(ERK, Hbarr2RP2)
	R_26: ERK(b_p~B_P,gp_p~0) -> ERK(b_p~0,gp_p~0) k25 #Modifiers(bpERK)
end reaction rules
end model
