###
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/30356259']
#@BQB_HAS_PROPERTY:['http://identifiers.org/go/GO:0007049', 'http://identifiers.org/biomodels.db/MODEL1803220001', 'http://identifiers.org/go/GO:0051726']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/41870']
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000856', 'http://identifiers.org/biomodels.db/MODEL1803220001']
#@creatorEmail:'msharifshohan@ebi,ac,uk'
#@creatorName:'Sharif Shohan Mohammad Umer'
#@notes:'This is an atomized translation of an SBML model created on 14/08/2021. The original model has 26 molecules and 26 reactions. The translated model has 13 molecules and 32 rules'
###
begin model
begin parameters
	GDt 500.0 #units:unit_0
	GCN 1.0 #units:unit_0
	GWt 1.0 #units:unit_0
	GCt 1.0 #units:unit_0
	StartThr 0.3 #units:unit_1
	MitosisThr 0.2 #units:unit_1
	GRm 1.0
	kSyVo 0.042 #units:unit_2
	kSyTm 2.1 #units:unit_3
	kAsGiTm 10.0 #units:unit_2
	kAsGdTm 1.0 #units:unit_2
	kDsGiTm 0.1 #units:unit_3
	kDsGdTm 1.0 #units:unit_3
	kSyCln3 1.5 #units:unit_4
	kDeCln3 1.0 #units:unit_3
	kSyCln 8.0 #units:unit_4
	kDeCln 1.0 #units:unit_3
	kSyClb 0.01 #units:unit_4
	kSyClbClb 0.3 #units:unit_4
	jSyClb 0.3 #units:unit_1
	kDeClb 0.01 #units:unit_3
	kDeClbCdh 2.0 #units:unit_5
	kSyWhi 0.02 #units:unit_4
	kPhWhiCln3 1.0 #units:unit_3
	kPhWhiCln 100.0 #units:unit_5
	kDpWhi 1.0 #units:unit_3
	kAsWhiSbf 1.0 #units:unit_5
	kPhSbfClb 5.0 #units:unit_5
	kDpSbf 0.2 #units:unit_3
	kAcCdh 0.01 #units:unit_6
	kAcCdhCdc 2.0 #units:unit_3
	kInCdhCln 0.125 #units:unit_3
	kInCdhClb 2.0 #units:unit_3
	jCdh 0.001 #units:unit_1
	kAcCdcClb 0.5 #units:unit_3
	kInCdc 0.25 #units:unit_6
	jCdc 0.001 #units:unit_1
	NSt 1.0 #units:unit_7
	kPhWhipCln3 1.0 #units:unit_5
	kPhWhipCln 3.0 #units:unit_5
	kAsCln3Whi 100.0 #units:unit_5
	kDsCln3Whi 0.1 #units:unit_3
	GIt (1.0)
	GRd 0
	WHIt 4.41666666666667
	SBFt 1.0
	TMt 50.8333333333333
	activeSBF 9.999444888487667e-13
	CLN3t 0.17
end parameters
begin molecule types
	CLN()
	CLN3WHISBF()
	CDCi(CDCa~CDCa~0)
	TM(gd,gi)
	CDHa()
	CDHi()
	CLB()
	GD(tm)
	SBF(p~P~0,u~U~0,whi)
	WHI(p~P~0,sbf)
	CLN3()
	WHIn()
	GI(tm)
end molecule types
begin seed species
	GD(tm) 450.0 #GD #GD
	TM(gd,gi!877).GI(tm!877) 0.8333333333333334 #GITM #GITM
	TM(gd!878,gi).GD(tm!878) 50.0 #GDTM #GDTM
	WHI(p~0,sbf) 3.3333333333333335 #WHI #WHI
	WHI(p~P,sbf) 0.08333333333333334 #WHIp #WHIp
	SBF(p~0,u~0,whi) 1.19987353386364e-12 #SBF #SBF
	CDHa() 1.0 #CDHa #CDHa
	CDCi(CDCa~0) 1.0 #CDCi #CDCi
	SBF(p~0,u~0,whi!879).WHI(p~0,sbf!879) 0.66 * (1.0) #WHISBF
	SBF(p~0,u~U,whi) ((1.0000000000012) / tV -(0.0) / tV) * tV #SBFu
	CLN3WHISBF() 0.17 * (1.0) #CLN3WHISBF
	SBF(p~P,u~0,whi!879).WHI(p~0,sbf!879) 0.17 * (1.0) #WHIpSBF
end seed species
begin observables
	Species TM TM(gd,gi) #TM
	Species GI GI(tm) #GI
	Species GD GD(tm) #GD
	Species GITM TM(gd,gi!877).GI(tm!877) #GITM
	Species GDTM TM(gd!878,gi).GD(tm!878) #GDTM
	Species CLN3 CLN3() #CLN3
	Species WHI WHI(p~0,sbf) #WHI
	Species WHIp WHI(p~P,sbf) #WHIp
	Species SBF SBF(p~0,u~0,whi) #SBF
	Species WHISBF SBF(p~0,u~0,whi!879).WHI(p~0,sbf!879) #WHISBF
	Species WHIn WHIn() #WHIn
	Species SBFu SBF(p~0,u~U,whi) #SBFu
	Species SBFp SBF(p~P,u~0,whi) #SBFp
	Species CLN CLN() #CLN
	Species CLB CLB() #CLB
	Species CDHa CDHa() #CDHa
	Species CDHi CDHi() #CDHi
	Species CDCa CDCi(CDCa~CDCa) #CDCa
	Species CDCi CDCi(CDCa~0) #CDCi
	Species CLN3WHISBF CLN3WHISBF() #CLN3WHISBF
	Species WHIpSBF SBF(p~P,u~0,whi!879).WHI(p~0,sbf!879) #WHIpSBF
end observables
begin functions
	SBF_ar() = -1.0*CLN3WHISBF + 1.0*NSt - 1.0*WHISBF - 1.0*WHIpSBF + 1.2e-12
	SBFt_ar() = 1.0*CLN3WHISBF + 1.0*SBF_ar + 1.0*WHISBF + 1.0*WHIpSBF
	activeSBF_ar() = SBF_ar*SBFu/SBFt_ar
	arRatedV() = GCN*GDTM*GRd*kSyVo/GDt
	arRatemV() = GCN*GDTM*GRm*kSyVo/GDt
	rV() = 0
	GI_ar() = -GITM + GIt
	GD_ar() = -GDTM + GDt
	tV() = 1.2
	WHIt_ar() = 1.0*CLN3WHISBF + 1.0*WHI + 1.0*WHISBF + 1.0*WHIn + 1.0*WHIp + 1.0*WHIpSBF
	kSySbf() = kSyVo
	TMt_ar() = 1.0*GDTM + 1.0*GITM + 1.0*TM
	kSyCdh() = kSyVo
	kSyCdc() = kSyVo
	CLN3t_ar() = 1.0*CLN3 + 1.0*CLN3WHISBF
	fRate0() = GCN*GDTM*kSyTm/GDt
	fRate1() = 0.694444444444444*kAsGiTm
	fRate1m() = 0.833333333333333*kDsGiTm
	fRate2() = 0.694444444444444*kAsGdTm
	fRate2m() = 0.833333333333333*kDsGdTm
	fRate3() = GCt*GDTM*kSyCln3/GDt
	fRate5() = CLB*kPhSbfClb
	fRate7() = GCN*GDTM*SBF_ar*SBFu*kSyCln/(GDt*SBFt_ar^2)
	fRate9() = GCN*GDTM*kSyCdh/GDt
	fRate10() = GCN*GDTM*kSyCdc/GDt
	fRate11() = CLB*kAcCdcClb/(1.2*CDCi + 1.44*jCdc)
	fRate12() = kInCdc/(CDCa + 1.2*jCdc)
	fRate13() = CDHi*(0.833333333333333*CDCa*kAcCdhCdc + kAcCdh)/(1.0*CDHi + 1.2*jCdh)
	fRate14() = CDHa*(0.833333333333333*CLB*kInCdhClb + 0.833333333333333*CLN*kInCdhCln)/(1.0*CDHa + 1.2*jCdh)
	fRate15() = 0.833333333333333*GCN*GDTM*(CLB*kSyClbClb + kSyClb*(CLB + 1.2*jSyClb))/(GDt*(CLB + 1.2*jSyClb))
	fRate16() = 0.833333333333333*CLB*(0.833333333333333*CDHa*kDeClbCdh + kDeClb)
	fRate17() = GITM*GRd*GWt*kSyWhi/GIt
	fRate18() = 0.694444444444444*kAsCln3Whi
	fRate18m() = 0.833333333333333*kDsCln3Whi
	fRate20() = CLN*kPhWhiCln
	fRate25() = 1.2*WHIpSBF*(0.833333333333333*CLN*kPhWhipCln + 0.833333333333333*CLN3*kPhWhipCln3)
end functions
begin reaction rules
	Synthesis_of_transcription_machninery: 0  -> TM(gd,gi) fRate0() #Modifiers(GDTM)
	Association_dissociation_of_TM_and_size_independent_genes: TM(gd,gi) + GI(tm) <-> TM(gd,gi!877).GI(tm!877) fRate1(),fRate1m()
	Association_dissociation_of_TM_and_size_dependent_genes: TM(gd,gi) + GD(tm) <-> TM(gd!878,gi).GD(tm!878) fRate2(),fRate2m()
	Synthesis_of_Cln3: 0  -> CLN3() fRate3() #Modifiers(GDTM)
	Degradation_of_Cln3: CLN3() -> 0  kDeCln3
	Phosphorylation_of_SBF: SBF(p~0,u~U,whi) -> SBF(p~P,u~0,whi) fRate5() #Modifiers(CLB)
	Dephosphorylation_of_SBF: SBF(p~P,u~0,whi) -> SBF(p~0,u~U,whi) kDpSbf
	Synthesis_of_Cln1_2: 0  -> CLN() fRate7() #Modifiers(GDTM, SBF, SBFt, SBFu)
	Degradation_of_Cln1_2: CLN() -> 0  kDeCln
	Synthesis_of_Cdh1: 0  -> CDHi() fRate9() #Modifiers(GDTM)
	Synthesis_of_Cdc20: 0  -> CDCi(CDCa~0) fRate10() #Modifiers(GDTM)
	Activation_of_APC_Cdc20: CDCi(CDCa~0) -> CDCi(CDCa~CDCa) fRate11() #Modifiers(CLB)
	Inactivation_of_APC_C_Cdc20: CDCi(CDCa~CDCa) -> CDCi(CDCa~0) fRate12()
	Activation_of_APC_C_Cdh1_reactants_0: 0  -> CDHi() -1*(fRate13()) #Modifiers(CDCa)
	Activation_of_APC_C_Cdh1_products_0: 0  -> CDHa() fRate13() #Modifiers(CDCa)
	Inactivation_of_APC_C_Cdh1_reactants_0: 0  -> CDHa() -1*(fRate14()) #Modifiers(CLN, CLB)
	Inactivation_of_APC_C_Cdh1_products_0: 0  -> CDHi() fRate14() #Modifiers(CLN, CLB)
	Synthesis_of_Clb1_2: 0  -> CLB() fRate15() #Modifiers(CLB, GDTM)
	Degradation_of_Clb1_2_reactants_0: 0  -> CLB() -1*(fRate16()) #Modifiers(CDHa)
	Synthesis_of_Whi5: 0  -> WHIn() fRate17() #Modifiers(GITM)
	Association_dissociation_of_Cln3_and_Whi5_SBF: CLN3() + SBF(p~0,u~0,whi!879).WHI(p~0,sbf!879) <-> CLN3WHISBF() fRate18(),fRate18m()
	Association_of_Whi5_and_SBF: WHI(p~0,sbf) + SBF(p~0,u~0,whi) -> SBF(p~0,u~0,whi!879).WHI(p~0,sbf!879) kAsWhiSbf
	Phosphorylation_of_free_Whi5: WHI(p~0,sbf) -> WHI(p~P,sbf) fRate20() #Modifiers(CLN)
	Dephosphorylation_of_free_Whi5: WHI(p~P,sbf) -> WHI(p~0,sbf) kDpWhi
	Phosphorylation_of_Whi5_in_Cln3_Whi5_SBF_complexes: CLN3WHISBF() -> CLN3() + SBF(p~P,u~0,whi!879).WHI(p~0,sbf!879) kPhWhiCln3
	Degradation_of_Cln3_in_Cln3_Whi5_SBF_complexes: CLN3WHISBF() -> SBF(p~0,u~0,whi!879).WHI(p~0,sbf!879) kDeCln3
	Dephosphorylation_of_hypo_phosphorylated_Whi5_in_Whi5_SBF_complexes: SBF(p~P,u~0,whi!879).WHI(p~0,sbf!879) -> SBF(p~0,u~0,whi!879).WHI(p~0,sbf!879) kDpWhi
	Hyper_phosphorylation_of_Whi5_in_hypo_phosphorylated_Whi5_SBF_complexes_reactants_0: 0  -> SBF(p~P,u~0,whi!879).WHI(p~0,sbf!879) -1*(fRate25()) #Modifiers(CLN3, CLN)
	Hyper_phosphorylation_of_Whi5_in_hypo_phosphorylated_Whi5_SBF_complexes_products_0: 0  -> SBF(p~0,u~0,whi) fRate25() #Modifiers(CLN3, CLN)
	Hyper_phosphorylation_of_Whi5_in_hypo_phosphorylated_Whi5_SBF_complexes_products_1: 0  -> WHI(p~P,sbf) fRate25() #Modifiers(CLN3, CLN)
	0  -> mV() arRatemV #rateLaw
	0  -> dV() arRatedV #rateLaw
end reaction rules
end model
