###
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/31048505']
#@BQB_IS:['http://identifiers.org/biomodels.db/MODEL1904020002']
#@BQB_HAS_PROPERTY:['http://identifiers.org/ncit/C39163', 'http://identifiers.org/taxonomy/9606']
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000869', 'http://identifiers.org/biomodels.db/MODEL1904020002']
#@creatorEmail:'Simon.Mitchell@ucla.edu'
#@creatorName:'Mitchell Simon'
#@notes:'This is an atomized translation of an SBML model created on 14/08/2021. The original model has 5 molecules and 7 reactions. The translated model has 1 molecules and 7 rules'
###
begin model
begin parameters
	NIK 6022000000000000.0 #original 10.0substance/volume
	r1_k1 0.200000
	r2_Km 10.000000
	r2_kcat 0.050000
	r3_k1 0.000380
	r4_k1 0.000380
	r5_k1 0.000016
	r5_k2 0.000240
	r6_k1 0.000380
	r7_Km 10.000000
	r7_kcat 0.050000
end parameters
begin molecule types
	#^ bqbiol:is uniprot:Q00653
	p52(p100~p100~0,p52,t~T~0)
end molecule types
begin seed species
	$p52(p100~p100,p52,t~T) 1505500000000000.0 # (2.5 * 1e-09)mol/L * 6.022e23/mol *1.0L #p100t #p100t
end seed species
begin observables
	Species p100t p52(p100~p100,p52,t~T) #p100t
	Species p100 p52(p100~p100,p52,t~0) #p100
	Species p52 p52(p100~0,p52,t~0) #p52
	Species IkBd p52(p100~p100,p52!885,t~0).p52(p100~p100,p52!885,t~0) #IkBd
end observables
begin functions
	IkBd_uM() = IkBd/1000
	p52_uM() = p52/1000
	fRate1() = 0.05*NIK/(p100 + 10.0)
	fRate6() = 0.05*NIK/(IkBd + 10.0)
end functions
begin reaction rules
	p100_mRNA_Expressions: p52(p100~p100,p52,t~T) -> p52(p100~p100,p52,t~0) r1_k1
	p100_processing: p52(p100~p100,p52,t~0) -> p52(p100~0,p52,t~0) fRate1() #Modifiers(NIK)
	p52_degradation: p52(p100~0,p52,t~0) -> 0  r3_k1
	p100_degradation: p52(p100~p100,p52,t~0) -> 0  r4_k1
	p100_dimerization: p52(p100~p100,p52,t~0) + p52(p100~p100,p52,t~0) <-> p52(p100~p100,p52!885,t~0).p52(p100~p100,p52!885,t~0) r5_k1,r5_k2
	IkBd_degradation: p52(p100~p100,p52!885,t~0).p52(p100~p100,p52!885,t~0) -> 0  r6_k1
	IkBd_degradation_by_NIK: p52(p100~p100,p52!885,t~0).p52(p100~p100,p52!885,t~0) -> 0  fRate6() #Modifiers(NIK)
end reaction rules
end model
