###
#@BQM_HAS_INSTANCE:['http://identifiers.org/ncit/C39127', 'http://identifiers.org/taxonomy/5658', 'http://identifiers.org/biomodels.db/MODEL1812070001']
#@BQB_IS:['http://identifiers.org/biomodels.db/MODEL1812070001']
#@BQB_HAS_PROPERTY:['http://identifiers.org/ncit/C39127']
#@BQB_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/29128405', 'http://identifiers.org/taxonomy/5658']
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000873', 'http://identifiers.org/biomodels.db/MODEL1812070001']
#@creatorEmail:'msharifshohan@ebi.ac.uk'
#@creatorName:'Sharif Shohan Mohammad Umer'
#@notes:'This is an atomized translation of an SBML model created on 14/08/2021. The original model has 42 molecules and 38 reactions. The translated model has 28 molecules and 59 rules'
###
begin model
begin parameters
	r1_mw0930c7cf_99a6_4a20_a33d_02fd90e424bb 0.240000
	r2_mw5b78650d_d92f_4602_bbe9_66d900ff312e 0.220000
	r3_mwec4950e3_ecf8_4077_9cd1_b70818e911b9 0.190000
	r4_mw9c4a9937_faff_4853_8a76_d17a084948d9 0.160000
	r5_mwb8d480f9_5783_4feb_aaf1_2f861b09e009 0.140000
	r6_mw58dfe861_b815_48b4_89e9_6f71cccb561e 0.095000
	r7_mwdf0efe39_4f88_4fc1_930b_55865b8d52f0 0.080000
	r8_mw4594ab28_d538_4a72_875a_d878e907020d 0.000000
	r9_mw7b7a1d20_f258_4e3d_9234_62db60126326 0.000060
	r10_mw5ea6c681_bf85_4ac5_9aac_536087a97950 1.000000
	r10_mw65a608c7_1026_4108_bb3d_f3358430aaf2 1.000000
	r11_mw106608bc_52fb_40e5_babb_cbb58aaaeed4 0.240000
	r12_mwe0f7b31e_2efc_481e_90d0_e86c3b8d0be4 0.125000
	r13_mw1981fa4d_c122_41a6_8c85_55a49d408c00 400.000000
	r13_mw340bc412_34ab_498a_bd42_47dd6cf025bd 1.000000
	r13_mw6cf7ac60_5bab_4b73_bb47_dc064486f000 2000.000000
	r14_mw87e9394c_7eef_4271_85bc_d1b0a96db1f2 0.000000
	r15_mwd84cf612_edaf_4dd9_9abd_003cc0569864 0.000000
	r16_mw051e0a03_1d45_448b_be4a_9d489e1b3ff9 0.000000
	r16_mw322ca6ab_81cf_4f6c_835e_48bb5f8b11de 0.000000
	r16_mwf9b630f8_c8a5_4fd0_bef1_92819b1257d2 0.000000
	r17_mwe479dc91_2774_4239_8212_60a330a84a76 0.860000
	r18_mwf5ba0e23_9a0b_4bf6_b0ea_9fbc91843b5c 0.100000
	r19_mw3bf6abba_fc8d_4254_bc9c_037ec64d3e12 1000.000000
	r19_mw4c1174b0_1cba_4d7c_bedb_c29d9f65c10c 1.000000
	r19_mw85474b5d_1b19_4388_bcee_098fbb23f2e0 700.000000
	r20_mwd01d5494_fdcd_494e_8652_87201fa5b291 0.002000
	r21_mw7ff2e94a_ac19_47ed_9127_14d385a1e544 1.000000
	r21_mwf8062aeb_69d6_416b_b877_9687ef6fbc80 1.000000
	r22_mw5805aaa6_5a0a_495b_a21b_16e6ba6f39bc 0.300000
	r23_mw658feef9_67a1_431f_95fa_7358c6b294d2 0.000000
	r23_mw8d03d46b_3832_4fe6_8a6b_467ef38af206 10.000000
	r23_mwf50b6519_aaf9_4cb0_a651_d5a3159d7390 10.000000
	r24_mw5b67154e_1851_4ba0_9491_7a14b2064c42 0.060000
	r25_mw202bb744_d70a_4cf2_b2db_0d9d360bdfb5 0.100000
	r26_mw3288f227_0208_435a_a41c_b1778f50008c 0.090000
	r27_mwe250484c_acc9_4453_9eb6_49cda54b2f1e 0.300000
	r28_mw2ba0a425_a224_4fa1_affc_bcc206027a3e 1.000000
	r28_mw8f586bdf_8d42_49c1_807a_670a1c49cbd9 1.000000
	r29_mwe808b2da_9ed2_421e_a8d9_3c3534d42ee0 0.200000
	r30_mw7246cef3_7a78_43b0_acb7_21533c394daa 0.001000
	r31_mw2081c907_9d37_48a0_8581_8b8f3d5f7148 0.100000
	r32_mw91a51f27_e4be_41a6_a967_b6a63c909652 1.000000
	r32_mwd7b0f9fb_1180_47bb_b8c0_be2f89aa1c59 1.000000
	r33_mw2a60d98a_bc06_4e05_b965_c920da8987dc 10.000000
	r33_mw3c07a768_8e7a_49bb_8a1d_fdc92192f92b 0.000000
	r33_mw9704b67a_2c16_4ac7_a311_2096ab426758 10.000000
	r34_mw9ca6d980_6fbd_4207_9f2c_c05e2b5b0502 0.000000
	r34_mwcffa9e49_67c6_4908_9314_6c16030c8989 0.000000
	r34_mwf32cef57_32ba_4c0f_bbaf_bbc90af4a8aa 0.000000
	r35_mw287bd1ba_fbc1_43a0_94ab_38a6336bbebb 10.000000
	r35_mw2db26dbd_dda3_4770_b923_d2725a80ccba 1.000000
	r35_mwb86b112e_674a_4e98_8ca4_3d0273a134d4 10.000000
	r36_mw1aca690a_9ee1_460f_bc28_780fb04c1a32 1.000000
	r36_mwf604d18f_ae32_4d08_bfef_f778aae8f24b 1.000000
	r37_mwf80a94ba_03ba_44f0_b793_4f60c20fd074 0.000000
	r38_mwce7a28b5_2f60_4228_a88f_ccd3a6213c3e 0.230000
end parameters
begin compartments
	#volume units: L
	mw664a2e7f_0c35_423c_ac5d_34090e629a69 3 1.0 #membrane
	mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 3 1.0 #CYTOSOL
	mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 3 1.0 #NUCLEUS
end compartments
begin molecule types
	#^ bqbiol:isHomologTo uniprot:P01579
	IFN_g(ifn_gr)
	#^ bqbiol:isHomologTo uniprot:P08887
	IL6R(il6)
	#^ bqbiol:isHomologTo uniprot:O60603
	TLR2()
	#^ bqbiol:isHomologTo uniprot:P23458
	JAK2()
	#^ bqbiol:isHomologTo uniprot:Q9VEZ5
	IKKbeta()
	#^ bqbiol:isHomologTo uniprot:P23458
	JAK1_2()
	#^ bqbiol:isHomologTo uniprot:P08887
	IL6_IL6R_GP130()
	#^ bqbiol:isHomologTo uniprot:Q9V3Q6
	TAK1_TAB1_2()
	#^ bqbiol:isHomologTo uniprot:P51617
	IRAK1_IRAK4()
	#^ bqbiol:isHomologTo uniprot:A0A061RQ89
	MKK1_2()
	#^ bqbiol:isHomologTo uniprot:P08887, uniprot:P08887, uniprot:P08887
	IL6(il6r)
	#^ bmbiol:hasInstance uniprot:Q4QAU2
	ERK1_ERK2()
	#^ bqbiol:isHomologTo uniprot:Q9Y2C9
	TLR6_1()
	#^ bqbiol:isHomologTo uniprot:O64645
	SOCS3()
	#^ bqbiol:isHomologTo uniprot:B3EWE5
	TLP2()
	#^ bqbiol:isHomologTo uniprot:Q12933
	TRAF6()
	#^ bqbiol:hasProperty ncbigene:5416611
	#^ bmbiol:hasInstance ncbigene:5416611
	STAT3(_p~_P~0,s2_~S2_~0)
	LPG()
	#^ bqbiol:isHomologTo uniprot:P01579
	IFN_gR(ifn_g)
	#^ bmbiol:hasInstance ncbigene:5416611
	#^ bqbiol:hasPart ncbigene:5416611
	STAT1(_p~_P~0,s2_~S2_~0)
	#^ bqbiol:isHomologTo uniprot:O64645, uniprot:O64645
	SOCS1()
	#^ bqbiol:isHomologTo uniprot:Q99836
	MyD88()
	#^ bqbiol:isHomologTo uniprot:O64645, uniprot:O64645
	NFkB()
	#^ bqbiol:isHomologTo uniprot:Q9Y2C9
	TLR2_6_LPG()
	#^ bqbiol:hasPart uniprot:Q9BRQ8
	AIF()
	#^ bqbiol:isHomologTo uniprot:P23458
	JAK2_1()
	#^ bqbiol:isHomologTo uniprot:P35228
	iNOS()
	#^ bmbiol:hasInstance uniprot:Q87041
	gp130()
end molecule types
begin seed species
	@mw664a2e7f_0c35_423c_ac5d_34090e629a69:$TLR2()@mw664a2e7f_0c35_423c_ac5d_34090e629a69 6.0220000000000006e+26 # 1000.0mol/L * 6.022e23/mol *1.0L #TLR2 #mwfaacd7f7_6aa9_4e6c_a7d8_281f2022ba2f
	@mw664a2e7f_0c35_423c_ac5d_34090e629a69:$TLR6_1()@mw664a2e7f_0c35_423c_ac5d_34090e629a69 6.0220000000000006e+26 #original 1000.0mol/L  #TLR6_1 #mwa244ea2a_3e41_473b_9ae7_d0db512fc366
	@mw664a2e7f_0c35_423c_ac5d_34090e629a69:$IL6R(il6!888)@mw664a2e7f_0c35_423c_ac5d_34090e629a69.IL6(il6r!888)@mw664a2e7f_0c35_423c_ac5d_34090e629a69 6.0220000000000006e+26 #original 1000.0mol/L  #IL6_IL6R #mwb167e768_b778_4072_8798_3cf19e96d1d7
	@mw664a2e7f_0c35_423c_ac5d_34090e629a69:$IL6R(il6)@mw664a2e7f_0c35_423c_ac5d_34090e629a69 6.022000000000001e+28 #original 100000.0mol/L  #IL6R #mw9b410665_6c5e_4f37_a7f2_0cb0963b98b1
	@mw664a2e7f_0c35_423c_ac5d_34090e629a69:$IL6(il6r)@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 6.0220000000000006e+26 #original 1000.0mol/L  #IL6 #mw56c26af9_9f4a_4f13_936a_94ae6364342b
	@mw664a2e7f_0c35_423c_ac5d_34090e629a69:$LPG()@mw664a2e7f_0c35_423c_ac5d_34090e629a69 6.0220000000000006e+26 #original 1000.0mol/L  #LPG #mw763cffc8_c121_4004_afdb_97e9de9f0081
	@mw664a2e7f_0c35_423c_ac5d_34090e629a69:IL6_IL6R_GP130()@mw664a2e7f_0c35_423c_ac5d_34090e629a69 6.0220000000000006e+26 #original 1000.0mol/L  #IL6_IL6R_GP130 #mwf219928e_abba_4c09_9597_5d6910f7e4d9
	@mw664a2e7f_0c35_423c_ac5d_34090e629a69:$IFN_g(ifn_gr)@mw664a2e7f_0c35_423c_ac5d_34090e629a69 1.2044e+26 #original 200.0mol/L  #IFN_g #mw85ae78ed_34f7_460c_b906_1f512a83810c
	@mw664a2e7f_0c35_423c_ac5d_34090e629a69:$IFN_gR(ifn_g)@mw664a2e7f_0c35_423c_ac5d_34090e629a69 9.033e+25 #original 150.0mol/L  #IFN_gR #mw49322d55_ad63_4e7c_b1eb_42835c9b577a
	@mw664a2e7f_0c35_423c_ac5d_34090e629a69:IFN_gR(ifn_g!889)@mw664a2e7f_0c35_423c_ac5d_34090e629a69.IFN_g(ifn_gr!889)@mw664a2e7f_0c35_423c_ac5d_34090e629a69 4.8176e+26 #original 800.0mol/L  #IFNg_IFNgR #mwd7270399_0429_4c85_920a_de2e0ae74440
	@mw664a2e7f_0c35_423c_ac5d_34090e629a69:$gp130()@mw664a2e7f_0c35_423c_ac5d_34090e629a69 6.0220000000000006e+26 #original 1000.0mol/L  #gp130 #mw5b252d78_9ab9_438c_8b81_2189b1f76357
	@mw664a2e7f_0c35_423c_ac5d_34090e629a69:TLR2_6_LPG()@mw664a2e7f_0c35_423c_ac5d_34090e629a69 5.4198000000000005e+26 #original 900.0mol/L  #TLR2_6_LPG #mw6339814d_af4c_4eee_9455_7e20795f6aeb
	@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:MyD88()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 4.8176e+26 #original 800.0mol/L  #MyD88 #mwc42127ea_2b78_4381_b230_30e95cd5a9d6
	@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:IRAK1_IRAK4()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 4.2154e+26 #original 700.0mol/L  #IRAK1_IRAK4 #mw4fd8b902_e2a2_4910_899c_2a7d3425e0e0
	@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:TRAF6()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 3.6132e+26 #original 600.0mol/L  #TRAF6 #mwf06c0537_577b_4f13_a9a3_521f9d2217fb
	@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:TAK1_TAB1_2()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 3.0110000000000003e+26 #original 500.0mol/L  #TAK1_TAB1_2 #mwbba20281_3d8b_48c3_8e13_dee78e87dfb8
	@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:IKKbeta()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 2.4088e+26 #original 400.0mol/L  #IKKbeta #mw78198c86_4b16_4117_8592_6a95c3953126
	@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:NFkB()@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 1.8066e+26 #original 300.0mol/L  #NFkB #mw7938fab7_d0c6_497b_8fb6_75922fcc19d5
	@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:IL6(il6r)@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 6.022e+25 #original 100.0mol/L  #IL6 #mw8675a533_92fb_4fbf_b747_7bca05c5841c
	@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:STAT3(_p~_P,s2_~0)@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 5.4198e+28 #original 90000.0mol/L  #STAT3_P #mw869055b5_5d27_4f4a_a390_b3fa48d6780e
	@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:$JAK1_2()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 1.2044000000000001e+27 #original 2000.0mol/L  #JAK1_2 #mwce6e4efd_3187_4379_ad47_104c95e0eb3b
	@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:STAT3(_p~0,s2_~S2_)@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 4.8176e+28 #original 80000.0mol/L  #s2_STAT3 #mwc84af692_e3fc_4ede_99b6_b0cce3729bf7
	@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:$JAK2_1()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 1.2044000000000001e+27 #original 2000.0mol/L  #JAK2_1 #mw57b4236e_c789_4799_a4f9_a03437a5593a
	@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:SOCS1()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 6.022e+27 #original 10000.0mol/L  #SOCS1 #mwacd53f34_4935_4b6a_8267_024f0d966c8c
	@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:TLP2()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 1.2044e+26 #original 200.0mol/L  #TLP2 #mwf26f605f_29e9_4454_834c_7b3edab4bbc2
	@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:MKK1_2()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 1.5055000000000001e+26 #original 250.0mol/L  #MKK1_2 #mw10b15557_55f5_4525_b19d_161b056f5791
	@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:$ERK1_ERK2()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 6.022e+25 #original 100.0mol/L  #ERK1_ERK2 #mw6f8ce639_1c28_444f_b6e6_30ff06ab0d6e
	@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:$JAK2()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 9.033e+27 #original 15000.0mol/L  #JAK2 #mw7f261959_39d2_4e8b_92b6_4466c2504544
	@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:STAT1(_p~0,s2_~0)@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 6.022e+25 #original 100.0mol/L  #STAT1 #mwb9a40fab_a7c9_4984_805f_045fefc4ff32
	@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:STAT3(_p~0,s2_~0)@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 1.2044e+28 #original 20000.0mol/L  #STAT3 #mw58370246_a992_4253_8029_12fbb07a417d
	@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9:NFkB()@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 1.2044e+26 #original 200.0mol/L  #NFkB #mwba110304_bd9a_4fd0_9b4c_b8bfc975e30b
	@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9:IL6(il6r)@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 1.5055000000000001e+26 #original 250.0mol/L  #IL6 #mw5607cee0_ee75_4065_9368_d07c3abbe18b
	@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9:STAT3(_p~0,s2_~S2_)@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 5.419800000000001e+27 #original 9000.0mol/L  #s2_STAT3 #mw55b6f083_2b28_4a1a_ab90_82a751525d72
	@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9:STAT1(_p~0,s2_~0)@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 6.022e+25 #original 100.0mol/L  #STAT1 #mw364ca1a4_fc56_4138_8031_16341ac865de
	@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9:STAT3(_p~0,s2_~0)@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 6.022e+25 #original 100.0mol/L  #STAT3 #mw4fc13b75_10cc_41fb_b9f8_1ce95fccae73
	@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9:SOCS1()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 3.0110000000000003e+28 #original 50000.0mol/L  #SOCS1 #mw3d58864c_79c7_4ff2_98fe_1a85b2ccc43d
end seed species
begin observables
	Species TLR2_mw664a2e7f_0c35_423c_ac5d_34090e629a69 @mw664a2e7f_0c35_423c_ac5d_34090e629a69:TLR2()@mw664a2e7f_0c35_423c_ac5d_34090e629a69 #TLR2
	Species TLR6_1_mw664a2e7f_0c35_423c_ac5d_34090e629a69 @mw664a2e7f_0c35_423c_ac5d_34090e629a69:TLR6_1()@mw664a2e7f_0c35_423c_ac5d_34090e629a69 #TLR6/1
	Species IL6_IL6R_mw664a2e7f_0c35_423c_ac5d_34090e629a69 @mw664a2e7f_0c35_423c_ac5d_34090e629a69:IL6R(il6!888)@mw664a2e7f_0c35_423c_ac5d_34090e629a69.IL6(il6r!888)@mw664a2e7f_0c35_423c_ac5d_34090e629a69 #IL6-IL6R
	Species IL6R_mw664a2e7f_0c35_423c_ac5d_34090e629a69 @mw664a2e7f_0c35_423c_ac5d_34090e629a69:IL6R(il6)@mw664a2e7f_0c35_423c_ac5d_34090e629a69 #IL6R
	Species IL6_mw664a2e7f_0c35_423c_ac5d_34090e629a69 @mw664a2e7f_0c35_423c_ac5d_34090e629a69:IL6(il6r)@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 #IL6
	Species LPG_mw664a2e7f_0c35_423c_ac5d_34090e629a69 @mw664a2e7f_0c35_423c_ac5d_34090e629a69:LPG()@mw664a2e7f_0c35_423c_ac5d_34090e629a69 #LPG
	Species IL6_IL6R_GP130_mw664a2e7f_0c35_423c_ac5d_34090e629a69 @mw664a2e7f_0c35_423c_ac5d_34090e629a69:IL6_IL6R_GP130()@mw664a2e7f_0c35_423c_ac5d_34090e629a69 #IL6-IL6R-GP130
	Species IFN_g_mw664a2e7f_0c35_423c_ac5d_34090e629a69 @mw664a2e7f_0c35_423c_ac5d_34090e629a69:IFN_g(ifn_gr)@mw664a2e7f_0c35_423c_ac5d_34090e629a69 #IFN-g
	Species IFN_gR_mw664a2e7f_0c35_423c_ac5d_34090e629a69 @mw664a2e7f_0c35_423c_ac5d_34090e629a69:IFN_gR(ifn_g)@mw664a2e7f_0c35_423c_ac5d_34090e629a69 #IFN-gR
	Species IFNg_IFNgR_mw664a2e7f_0c35_423c_ac5d_34090e629a69 @mw664a2e7f_0c35_423c_ac5d_34090e629a69:IFN_gR(ifn_g!889)@mw664a2e7f_0c35_423c_ac5d_34090e629a69.IFN_g(ifn_gr!889)@mw664a2e7f_0c35_423c_ac5d_34090e629a69 #IFNg-IFNgR
	Species gp130_mw664a2e7f_0c35_423c_ac5d_34090e629a69 @mw664a2e7f_0c35_423c_ac5d_34090e629a69:gp130()@mw664a2e7f_0c35_423c_ac5d_34090e629a69 #gp130
	Species TLR2_6_LPG_mw664a2e7f_0c35_423c_ac5d_34090e629a69 @mw664a2e7f_0c35_423c_ac5d_34090e629a69:TLR2_6_LPG()@mw664a2e7f_0c35_423c_ac5d_34090e629a69 #TLR2/6-LPG
	Species MyD88_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 @mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:MyD88()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 #MyD88
	Species IRAK1_IRAK4_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 @mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:IRAK1_IRAK4()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 #IRAK1-IRAK4
	Species TRAF6_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 @mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:TRAF6()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 #TRAF6
	Species TAK1_TAB1_2_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 @mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:TAK1_TAB1_2()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 #TAK1-TAB1/2
	Species IKKbeta_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 @mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:IKKbeta()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 #IKKbeta
	Species NFkB_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 @mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:NFkB()@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 #NFkB
	Species IL6_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 @mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:IL6(il6r)@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 #IL6
	Species STAT3_P_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 @mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:STAT3(_p~_P,s2_~0)@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 #STAT3.P
	Species STAT1_P_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 @mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:STAT1(_p~_P,s2_~0)@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 #STAT1.P
	Species JAK1_2_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 @mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:JAK1_2()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 #JAK1/2
	Species s2_STAT1_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 @mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:STAT1(_p~0,s2_~S2_)@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 #2.STAT1
	Species s2_STAT3_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 @mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:STAT3(_p~0,s2_~S2_)@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 #2.STAT3
	Species JAK2_1_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 @mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:JAK2_1()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 #JAK2/1
	Species SOCS1_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 @mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:SOCS1()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 #SOCS1
	Species TLP2_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 @mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:TLP2()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 #TLP2
	Species MKK1_2_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 @mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:MKK1_2()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 #MKK1/2
	Species ERK1_ERK2_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 @mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:ERK1_ERK2()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 #ERK1/ERK2
	Species JAK2_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 @mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:JAK2()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 #JAK2
	Species STAT1_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 @mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:STAT1(_p~0,s2_~0)@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 #STAT1
	Species STAT3_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 @mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22:STAT3(_p~0,s2_~0)@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 #STAT3
	Species NFkB_mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 @mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9:NFkB()@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 #NFkB
	Species IL6_mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 @mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9:IL6(il6r)@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 #IL6
	Species s2_STAT1_mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 @mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9:STAT1(_p~0,s2_~S2_)@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 #2.STAT1
	Species s2_STAT3_mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 @mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9:STAT3(_p~0,s2_~S2_)@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 #2.STAT3
	Species SOCS3_mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 @mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9:SOCS3()@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 #SOCS3
	Species STAT1_mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 @mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9:STAT1(_p~0,s2_~0)@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 #STAT1
	Species STAT3_mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 @mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9:STAT3(_p~0,s2_~0)@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 #STAT3
	Species SOCS1_mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 @mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9:SOCS1()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 #SOCS1
	Species iNOS_mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 @mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9:iNOS()@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 #iNOS
	Species AIF_mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 @mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9:AIF()@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 #AIF
end observables
begin functions
	fRate7() = 1.0e-15
	fRate8() = 6.0e-5
	fRate9() = 1.0*STAT3_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22/(1.0*STAT3_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 + 1.0)
	fRate12() = 400.0*NFkB_mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9^1.0/(1.0*NFkB_mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9^1.0 + 2000.0)
	fRate15() = 0
	fRate18() = 1000.0*s2_STAT3_mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9^1.0/(1.0*s2_STAT3_mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9^1.0 + 700.0)
	fRate20() = 1.0*STAT1_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22/(1.0*STAT1_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 + 1.0)
	fRate22() = 1.0e-15*JAK2_1_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22/(1.0*JAK2_1_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 + 1.0*SOCS1_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 + 10.0)
	fRate27() = 1.0*STAT3_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22/(1.0*STAT3_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 + 1.0)
	fRate29() = 0.001
	fRate31() = 1.0/(1.0*JAK2_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 + 1.0)
	fRate32() = 1.0e-15*JAK2_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22/(1.0*JAK2_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 + 1.0*SOCS1_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 + 10.0)
	fRate33() = 0
	fRate34() = 10.0*s2_STAT3_mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9^1.0/(1.0*s2_STAT3_mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9^1.0 + 10.0)
	fRate35() = 1.0*STAT1_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22/(1.0*STAT1_mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 + 1.0)
	fRate36() = 8.0e-9
end functions
begin reaction rules
	mw3e247db2_b375_4e41_9e33_bb760833ee16: MyD88()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 -> IRAK1_IRAK4()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 r1_mw0930c7cf_99a6_4a20_a33d_02fd90e424bb
	mwe089edae_0b7c_485a_814d_227b9a9ad5fd: IRAK1_IRAK4()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 -> TRAF6()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 r2_mw5b78650d_d92f_4602_bbe9_66d900ff312e
	mw355d0180_1300_4b22_afd0_dca38ce33afe: TRAF6()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 -> TAK1_TAB1_2()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 r3_mwec4950e3_ecf8_4077_9cd1_b70818e911b9
	mw68476f54_ab4a_403c_af35_355d74054f82: TAK1_TAB1_2()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 -> IKKbeta()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 r4_mw9c4a9937_faff_4853_8a76_d17a084948d9
	mw8248f0e8_00d0_44dc_ae79_b61f77b4c52c: IKKbeta()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 -> NFkB()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 r5_mwb8d480f9_5783_4feb_aaf1_2f861b09e009
	mw301aee85_afee_49b3_ad89_b1cc5c8567b1: IL6(il6r)@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 -> IL6(il6r)@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 r6_mw58dfe861_b815_48b4_89e9_6f71cccb561e
	mw59a4b107_a52b_43b5_8415_3668e494102e: IL6(il6r)@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 -> IL6(il6r)@mw664a2e7f_0c35_423c_ac5d_34090e629a69 r7_mwdf0efe39_4f88_4fc1_930b_55865b8d52f0
	mw2fe228f0_8489_473b_b52d_da641e63e7cb: IL6R(il6!888)@mw664a2e7f_0c35_423c_ac5d_34090e629a69.IL6(il6r!888)@mw664a2e7f_0c35_423c_ac5d_34090e629a69 + gp130()@mw664a2e7f_0c35_423c_ac5d_34090e629a69 -> IL6_IL6R_GP130()@mw664a2e7f_0c35_423c_ac5d_34090e629a69 fRate7()
	mwc6831066_978e_4f05_b58a_7b138e3ba727: IL6R(il6)@mw664a2e7f_0c35_423c_ac5d_34090e629a69 + IL6(il6r)@mw664a2e7f_0c35_423c_ac5d_34090e629a69 -> IL6R(il6!888)@mw664a2e7f_0c35_423c_ac5d_34090e629a69.IL6(il6r!888)@mw664a2e7f_0c35_423c_ac5d_34090e629a69 fRate8()
	mw3ea84261_760d_4fc7_b420_c728b0f6d90d_reactants_0: 0  -> JAK1_2()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 -1*(fRate9())
	mw3ea84261_760d_4fc7_b420_c728b0f6d90d_reactants_1: 0  -> STAT3(_p~0,s2_~0)@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 -1*(fRate9())
	mw3ea84261_760d_4fc7_b420_c728b0f6d90d_products_0: 0  -> STAT3(_p~_P,s2_~0)@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 fRate9()
	mw4a4f5084_a8ec_4fd2_a74f_6db84a627a29: IL6_IL6R_GP130()@mw664a2e7f_0c35_423c_ac5d_34090e629a69 -> JAK1_2()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 r11_mw106608bc_52fb_40e5_babb_cbb58aaaeed4
	mw1eec4037_93c1_4fe1_93d3_7e85a42216f7: NFkB()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 -> NFkB()@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 r12_mwe0f7b31e_2efc_481e_90d0_e86c3b8d0be4
	mwe737aa62_097e_474c_87d5_7b7eeaadd087_reactants_0: 0  -> NFkB()@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 -1*(fRate12())
	mwe737aa62_097e_474c_87d5_7b7eeaadd087_products_0: 0  -> IL6(il6r)@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 fRate12()
	mwe737aa62_097e_474c_87d5_7b7eeaadd087_products_1: 0  -> STAT1(_p~0,s2_~0)@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 fRate12()
	mwe737aa62_097e_474c_87d5_7b7eeaadd087_products_2: 0  -> STAT3(_p~0,s2_~0)@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 fRate12()
	mw5dd08c34_8422_4e63_a58d_a497237b3d46: STAT1(_p~_P,s2_~0)@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 -> STAT1(_p~0,s2_~S2_)@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 r14_mw87e9394c_7eef_4271_85bc_d1b0a96db1f2
	mw019a6415_bb9a_40a9_b627_5aa5fccedbc8: STAT1(_p~0,s2_~S2_)@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 -> STAT1(_p~0,s2_~S2_)@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 r15_mwd84cf612_edaf_4dd9_9abd_003cc0569864
	mwc2dc1496_a57b_4ea5_ba81_838f3344915c_reactants_0: 0  -> STAT1(_p~0,s2_~S2_)@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 -1*(fRate15())
	mwc2dc1496_a57b_4ea5_ba81_838f3344915c_products_0: 0  -> SOCS1()@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 fRate15()
	mw35c5dd2a_d94c_4b60_a72d_561cb55f84f0: STAT3(_p~_P,s2_~0)@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 -> STAT3(_p~0,s2_~S2_)@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 r17_mwe479dc91_2774_4239_8212_60a330a84a76
	mwd4d17665_ea8f_45cd_aeae_c8a3ea8d4115: STAT3(_p~0,s2_~S2_)@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 -> STAT3(_p~0,s2_~S2_)@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 r18_mwf5ba0e23_9a0b_4bf6_b0ea_9fbc91843b5c
	mw4764870e_b030_4ffe_861a_1660a6d08340_reactants_0: 0  -> STAT3(_p~0,s2_~S2_)@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 -1*(fRate18())
	mw4764870e_b030_4ffe_861a_1660a6d08340_products_0: 0  -> AIF()@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 fRate18()
	mwddce3a0d_4301_48aa_ae63_37a44f2f2088: IL6_IL6R_GP130()@mw664a2e7f_0c35_423c_ac5d_34090e629a69 -> JAK2_1()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 r20_mwd01d5494_fdcd_494e_8652_87201fa5b291
	mwa93a841c_769e_407d_8c81_f1831ca594dd_reactants_0: 0  -> JAK2_1()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 -1*(fRate20())
	mwa93a841c_769e_407d_8c81_f1831ca594dd_reactants_1: 0  -> STAT1(_p~0,s2_~0)@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 -1*(fRate20())
	mwa93a841c_769e_407d_8c81_f1831ca594dd_products_0: 0  -> STAT1(_p~_P,s2_~0)@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 fRate20()
	mwbc1856f9_a538_4023_bce5_09484e8e71cf: SOCS1()@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 -> SOCS1()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 r22_mw5805aaa6_5a0a_495b_a21b_16e6ba6f39bc
	mw1f853efb_fa0c_47b5_8151_210a68961204_reactants_0: 0  -> SOCS1()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 -1*(fRate22())
	mw1f853efb_fa0c_47b5_8151_210a68961204_reactants_1: 0  -> JAK2_1()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 -1*(fRate22())
	mw1f853efb_fa0c_47b5_8151_210a68961204_products_0: 0  -> JAK2_1()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 fRate22()
	mw1f853efb_fa0c_47b5_8151_210a68961204_products_1: 0  -> SOCS1()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 fRate22()
	mwfdc768f1_5ae9_47dc_9506_b957dd352582: STAT1(_p~0,s2_~0)@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 -> STAT1(_p~0,s2_~0)@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 r24_mw5b67154e_1851_4ba0_9491_7a14b2064c42
	mw35593d33_6426_452d_ad36_21f20cb38436: IKKbeta()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 -> TLP2()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 r25_mw202bb744_d70a_4cf2_b2db_0d9d360bdfb5
	mwb77c1134_efd5_47d0_8d36_02c3c68687c6: TLP2()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 -> MKK1_2()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 r26_mw3288f227_0208_435a_a41c_b1778f50008c
	mw9fb7e873_2840_486e_ac59_2329e9e9e45b: MKK1_2()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 -> ERK1_ERK2()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 r27_mwe250484c_acc9_4453_9eb6_49cda54b2f1e
	mwb582e1ea_d2f2_4bcb_a843_661ce2e430e5_reactants_0: 0  -> ERK1_ERK2()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 -1*(fRate27())
	mwb582e1ea_d2f2_4bcb_a843_661ce2e430e5_reactants_1: 0  -> STAT3(_p~0,s2_~0)@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 -1*(fRate27())
	mwb582e1ea_d2f2_4bcb_a843_661ce2e430e5_products_0: 0  -> STAT3(_p~_P,s2_~0)@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 fRate27()
	mwfe6ed8b6_844a_4bfd_bb0a_195c6fb5579e: STAT3(_p~0,s2_~0)@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 -> STAT3(_p~0,s2_~0)@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 r29_mwe808b2da_9ed2_421e_a8d9_3c3534d42ee0
	mw666be0bc_42c7_48cd_89b7_87e131f1e724: IFN_g(ifn_gr)@mw664a2e7f_0c35_423c_ac5d_34090e629a69 + IFN_gR(ifn_g)@mw664a2e7f_0c35_423c_ac5d_34090e629a69 -> IFN_gR(ifn_g!889)@mw664a2e7f_0c35_423c_ac5d_34090e629a69.IFN_g(ifn_gr!889)@mw664a2e7f_0c35_423c_ac5d_34090e629a69 fRate29()
	mw1d5d6ab3_4d84_4f27_a13a_c47c38be09de: IFN_gR(ifn_g!889)@mw664a2e7f_0c35_423c_ac5d_34090e629a69.IFN_g(ifn_gr!889)@mw664a2e7f_0c35_423c_ac5d_34090e629a69 -> JAK2()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 r31_mw2081c907_9d37_48a0_8581_8b8f3d5f7148
	mw69e4cb2d_f85e_4107_b5cd_a9bafe0827ee: JAK2()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 -> STAT1(_p~_P,s2_~0)@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 fRate31()
	mw29ed8c78_d683_42b9_90fb_69e2dca364ee_reactants_0: 0  -> SOCS1()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 -1*(fRate32())
	mw29ed8c78_d683_42b9_90fb_69e2dca364ee_reactants_1: 0  -> JAK2()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 -1*(fRate32())
	mw29ed8c78_d683_42b9_90fb_69e2dca364ee_products_0: 0  -> JAK2()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 fRate32()
	mw29ed8c78_d683_42b9_90fb_69e2dca364ee_products_1: 0  -> SOCS1()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 fRate32()
	mwbda33f89_b1c8_45c9_ad37_ec7130e4ba12_reactants_0: 0  -> STAT1(_p~0,s2_~S2_)@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 -1*(fRate33())
	mwbda33f89_b1c8_45c9_ad37_ec7130e4ba12_products_0: 0  -> iNOS()@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 fRate33()
	mw0de495aa_28d6_4ae7_8c1a_247b3546ed40_reactants_0: 0  -> STAT3(_p~0,s2_~S2_)@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 -1*(fRate34())
	mw0de495aa_28d6_4ae7_8c1a_247b3546ed40_products_0: 0  -> SOCS3()@mwdfcbcdb1_3058_4a8b_9166_5b5e144c52c9 fRate34()
	mw152eb150_14a4_40a8_bc56_0d6e3281a206_reactants_0: 0  -> ERK1_ERK2()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 -1*(fRate35())
	mw152eb150_14a4_40a8_bc56_0d6e3281a206_reactants_1: 0  -> STAT1(_p~0,s2_~0)@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 -1*(fRate35())
	mw152eb150_14a4_40a8_bc56_0d6e3281a206_products_0: 0  -> STAT1(_p~_P,s2_~0)@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 fRate35()
	mwdd6b7201_bde8_4631_8e90_e53b986d539d: TLR2()@mw664a2e7f_0c35_423c_ac5d_34090e629a69 + TLR6_1()@mw664a2e7f_0c35_423c_ac5d_34090e629a69 + LPG()@mw664a2e7f_0c35_423c_ac5d_34090e629a69 -> TLR2_6_LPG()@mw664a2e7f_0c35_423c_ac5d_34090e629a69 fRate36()
	mw00a624d9_79b2_424c_9362_50e77c3a3d6f: TLR2_6_LPG()@mw664a2e7f_0c35_423c_ac5d_34090e629a69 -> MyD88()@mwfef402b9_4b7e_4fbd_bba2_ff8998ab0b22 r38_mwce7a28b5_2f60_4228_a88f_ccd3a6213c3e
end reaction rules
end model
