###
#@BQB_OCCURS_IN:['http://identifiers.org/bto/BTO:0003092']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/1567783', 'http://identifiers.org/doi/10.1016/0960-0760(92)90025-E']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046', 'http://identifiers.org/ncit/C17054', 'http://identifiers.org/go/GO:0034650']
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL2002280001', 'http://identifiers.org/biomodels.db/BIOMD0000000916']
#@creatorEmail:'ahmad.azd@hotmail.com'
#@creatorName:'Zyoud Ahmad'
#@notes:'This is an atomized translation of an SBML model created on 14/08/2021. The original model has 5 molecules and 4 reactions. The translated model has 3 molecules and 4 rules'
###
begin model
begin parameters
	K1 3.6
	K2 1.2
	K3 26.6
	K4 1.2
	K5 1.2
end parameters
begin molecule types
	#^ bqbiol:occursIn bto:BTO:0003092
	ThecumulativeFODexcretedinthenon_urinarypool__X3__()
	#^ bqbiol:occursIn bto:BTO:0000647, bto:BTO:0000493
	TheFODinthegallbladderplintestinallumen__X5__()
	#^ bqbiol:occursIn bto:BTO:0003092
	TheFODinthecirculation__X1__(TheFODinthemetabolizingtissues__X4__~TheFODinthemetabolizingtissues__X4__~0,ThecumulativeFODexcretedintheurine__X2__~ThecumulativeFODexcretedintheurine__X2__~0)
end molecule types
begin seed species
	TheFODinthecirculation__X1__(TheFODinthemetabolizingtissues__X4__~0,ThecumulativeFODexcretedintheurine__X2__~0) 6.022e+20 # (1.0 * 0.001)mol/L * 6.022e23/mol *1.0L #TheFODinthecirculation__X1__ #The_FOD_in_the_circulation__X1
end seed species
begin observables
	Species TheFODinthecirculation__X1__ TheFODinthecirculation__X1__(TheFODinthemetabolizingtissues__X4__~0,ThecumulativeFODexcretedintheurine__X2__~0) #The FOD in the circulation (X1)
	Species TheFODinthemetabolizingtissues__X4__ TheFODinthecirculation__X1__(TheFODinthemetabolizingtissues__X4__~TheFODinthemetabolizingtissues__X4__,ThecumulativeFODexcretedintheurine__X2__~0) #The FOD in the metabolizing tissues (X4)
	Species ThecumulativeFODexcretedinthenon_urinarypool__X3__ ThecumulativeFODexcretedinthenon_urinarypool__X3__() #The cumulative FOD excreted in the non-urinary pool (X3)
	Species TheFODinthegallbladderplintestinallumen__X5__ TheFODinthegallbladderplintestinallumen__X5__() #The FOD in the gallbladder + intestinal lumen (X5)
	Species ThecumulativeFODexcretedintheurine__X2__ TheFODinthecirculation__X1__(TheFODinthemetabolizingtissues__X4__~0,ThecumulativeFODexcretedintheurine__X2__~ThecumulativeFODexcretedintheurine__X2__) #The cumulative FOD excreted in the urine (X2)
end observables
begin functions
	fRate1m() = 1.0*K5
end functions
begin reaction rules
	R1: TheFODinthecirculation__X1__(TheFODinthemetabolizingtissues__X4__~0,ThecumulativeFODexcretedintheurine__X2__~0) -> TheFODinthecirculation__X1__(TheFODinthemetabolizingtissues__X4__~TheFODinthemetabolizingtissues__X4__,ThecumulativeFODexcretedintheurine__X2__~0) K3
	R2: TheFODinthecirculation__X1__(TheFODinthemetabolizingtissues__X4__~TheFODinthemetabolizingtissues__X4__,ThecumulativeFODexcretedintheurine__X2__~0) <-> TheFODinthegallbladderplintestinallumen__X5__() K4,fRate1m()
	R3: TheFODinthegallbladderplintestinallumen__X5__() -> ThecumulativeFODexcretedinthenon_urinarypool__X3__() K2
	R4: TheFODinthecirculation__X1__(TheFODinthemetabolizingtissues__X4__~TheFODinthemetabolizingtissues__X4__,ThecumulativeFODexcretedintheurine__X2__~0) -> TheFODinthecirculation__X1__(TheFODinthemetabolizingtissues__X4__~0,ThecumulativeFODexcretedintheurine__X2__~ThecumulativeFODexcretedintheurine__X2__) K1
end reaction rules
end model
