###
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/doi/10.1016/j.chaos.2017.03.002']
#@BQB_OCCURS_IN:['http://identifiers.org/ncit/C94498']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046', 'http://identifiers.org/go/GO:0002418']
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000930', 'http://identifiers.org/biomodels.db/MODEL2004060002']
#@creatorEmail:'tiwarik@babraham.ac.uk'
#@creatorName:'Tiwari Krishna'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 4 molecules and 14 reactions. The translated model has 4 molecules and 14 rules'
###
begin model
begin parameters
	a 0.431
	b 1.02e-14
	c1 3.41e-10
	mu 0.0412
	g 0.015
	s 20.2
	Kc 0.6
	Kn 0.6
	Kt 0.8
	kt 3.2e-09
	p 2e-11
	alpha1 12000.0
	alpha2 750000000.0
	beta 0.012
	gamma 0.9
	Vm 0.45
	eta 0
end parameters
begin molecule types
	#^ bqbiol:hasProperty bto:BTO:0000775, obi:OBI_0000181
	Circulatinglymphocytepopulation__C__()
	#^ bqbiol:hasProperty obi:OBI_1110016
	Effectorimmunecellpopulation__N__()
	#^ bqbiol:hasProperty chebi:CHEBI:23888
	Chemotherapeuticdrugconcentration__M__()
	#^ bqbiol:hasProperty ncit:C12922
	TumorCellPopulation__T__()
end molecule types
begin seed species
	TumorCellPopulation__T__() 6.022e+27 # (10000000.0 * 0.001)mol/L * 6.022e23/mol *1.0L #TumorCellPopulation__T__ #Tumor_Cell_Population__T
	Effectorimmunecellpopulation__N__() 1.8066e+26 #original 300000.0substance/volume  #Effectorimmunecellpopulation__N__ #Effector_immune_cell_population__N
	Circulatinglymphocytepopulation__C__() 3.76375e+31 #original 62500000000.0substance/volume  #Circulatinglymphocytepopulation__C__ #Circulating_lymphocyte_population__C
	Chemotherapeuticdrugconcentration__M__() 2.7099000000000003e+20 #original 0.45substance/volume  #Chemotherapeuticdrugconcentration__M__ #Chemotherapeutic_drug_concentration__M
end seed species
begin observables
	Species TumorCellPopulation__T__ TumorCellPopulation__T__() #Tumor Cell Population (T)
	Species Effectorimmunecellpopulation__N__ Effectorimmunecellpopulation__N__() #Effector immune cell population (N)
	Species Circulatinglymphocytepopulation__C__ Circulatinglymphocytepopulation__C__() #Circulating lymphocyte population (C)
	Species Chemotherapeuticdrugconcentration__M__ Chemotherapeuticdrugconcentration__M__() #Chemotherapeutic drug concentration (M)
end observables
begin functions
	fRate0() = TumorCellPopulation__T__*a
	fRate0m() = TumorCellPopulation__T__*a*b
	fRate1() = Effectorimmunecellpopulation__N__*c1
	fRate2() = Chemotherapeuticdrugconcentration__M__*Kt
	fRate4() = Effectorimmunecellpopulation__N__*TumorCellPopulation__T__*g/(TumorCellPopulation__T__ + s)
	fRate6() = TumorCellPopulation__T__*p
	fRate7() = Chemotherapeuticdrugconcentration__M__*Kn
	fRate7m() = Chemotherapeuticdrugconcentration__M__*Effectorimmunecellpopulation__N__*Kn*eta
	fRate10() = Chemotherapeuticdrugconcentration__M__*Kc
	fRate10m() = Chemotherapeuticdrugconcentration__M__*Circulatinglymphocytepopulation__C__*Kc*eta
	fRate13() = TumorCellPopulation__T__*kt
end functions
begin reaction rules
	reaction_1: 0  <-> TumorCellPopulation__T__() fRate0(),fRate0m()
	reaction_2: TumorCellPopulation__T__() -> 0  fRate1() #Modifiers(Effector_immune_cell_population__N)
	reaction_3: TumorCellPopulation__T__() -> 0  fRate2() #Modifiers(Chemotherapeutic_drug_concentration__M)
	reaction_4: 0  -> Effectorimmunecellpopulation__N__() alpha1
	reaction_5: 0  -> Effectorimmunecellpopulation__N__() fRate4() #Modifiers(Tumor_Cell_Population__T)
	reaction_6: Effectorimmunecellpopulation__N__() -> 0  mu
	reaction_7: Effectorimmunecellpopulation__N__() -> 0  fRate6() #Modifiers(Tumor_Cell_Population__T)
	reaction_8: Effectorimmunecellpopulation__N__() <-> 0  fRate7(),fRate7m() #Modifiers(Chemotherapeutic_drug_concentration__M)
	reaction_9: 0  -> Circulatinglymphocytepopulation__C__() alpha2
	reaction_10: Circulatinglymphocytepopulation__C__() -> 0  beta
	reaction_11: Circulatinglymphocytepopulation__C__() <-> 0  fRate10(),fRate10m() #Modifiers(Chemotherapeutic_drug_concentration__M)
	reaction_12: Chemotherapeuticdrugconcentration__M__() -> 0  gamma
	reaction_13: 0  -> Chemotherapeuticdrugconcentration__M__() Vm
	reaction_14: Chemotherapeuticdrugconcentration__M__() -> 0  fRate13() #Modifiers(Tumor_Cell_Population__T)
end reaction rules
end model
