###
#@BQB_HAS_PART:['http://identifiers.org/go/GO:0007049']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_IS_DESCRIBED_BY:['http://identifiers.org/doi/10.1371/journal.pcbi.1004787']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046']
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000943', 'http://identifiers.org/biomodels.db/MODEL1809060002']
#@creatorEmail:'ahmad.azd@hotmail.com'
#@creatorName:'Zyoud Ahmad'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 52 molecules and 83 reactions. The translated model has 24 molecules and 83 rules'
###
begin model
begin parameters
	h1 1e-06
	can_Caspase_make_DNA_DSB 1.0
	has_DNA_DSB_repair 1.0
	a1 3e-10
	a2 1e-12
	q0_pten 1e-05
	q0_wip1 1e-05
	q0_mdm2 0.0001
	q0_bax 1e-05
	q0_p21 1e-05
	q1_pten 3e-13
	q1_mdm2 3e-13
	q1_wip1 3e-13
	q1_p21 3e-13
	q1_bax 3e-13
	q2 0.003
	s1 0.1
	s2 0.03
	s3 0.1
	s4 0.03
	s5 0.1
	t1 0.1
	t2 0.1
	t3 0.1
	t4 0.1
	t5 0.1
	s6 300.0
	s7 30.0
	s8 30.0
	s9 30.0
	s10 3.0
	p1 0.0003
	p2 1e-08
	p3 3e-08
	p4 1e-10
	p5 1e-08
	p6 1e-08
	p7 3e-09
	p8 3e-09
	p9 3e-06
	p10 3e-06
	p11 1e-10
	p12 1e-09
	d1 1e-08
	d2 3e-05
	d3 0.0001
	d4 1e-10
	d5 0.0001
	d6 1e-10
	d7 3e-07
	d8 0.0001
	d9 3e-05
	d10 0.0001
	d11 1e-10
	d12 10000.0
	b1 3e-05
	b2 0.003
	b3 0.003
	b4 1e-05
	b5 1e-05
	u1 0.001
	u2 0.001
	u3 0.001
	u5 0.0001
	u6 0.0001
	i1 0.001
	g1 0.0003
	g2 0.0003
	g3 0.0003
	g4 0.0003
	g5 0.0003
	g6 3e-05
	g7 1e-13
	g8 0.0003
	g9 0.0001
	g10 1e-05
	g101 1e-05
	g11 1e-11
	g12 1e-13
	g13 1e-13
	g14 0.0001
	g15 3e-05
	g16 0.0001
	g17 0.0003
	g18 0.0003
	g19 0.0003
	g20 0.0001
	h 2.0
	M1 5.0
	M2 100000.0
	M3 200000.0
	DNA_DSB_RepairCplx_total 20.0
	DNA_DSB_max 1000000.0
	IR_Gy 2.0
	DNA_DSB_per_IR_Gy 10.0
	tp2 600.0
	is_IR_switched_on 0
	ATM_tot_nuclear 6.022e+25 #original 100000.0substance/volume
	ATM_tot 6.022e+25 #original 100000.0substance/volume
	AKT_tot_nuclear 6.022e+25 #original 100000.0substance/volume
	AKT_tot 6.022e+25 #original 100000.0substance/volume
	PIP_tot_nuclear 6.022e+25 #original 100000.0substance/volume
	PIP_tot 6.022e+25 #original 100000.0substance/volume
	PI3K_tot_nuclear 6.022e+25 #original 100000.0substance/volume
	PI3K_tot 6.022e+25 #original 100000.0substance/volume
	E2F1_tot_nuclear 1.2044e+26 #original 200000.0substance/volume
	E2F1_tot 1.2044e+26 #original 200000.0substance/volume
	Fourteen33_tot_nuclear 1.2044e+26 #original 200000.0substance/volume
	Fourteen33_tot 1.2044e+26 #original 200000.0substance/volume
	ATM_0_nuclear 0 #original 100000.0substance/volume
	ATM_0 0 #original 100000.0substance/volume
	AKT_0_cytoplasm 0 #original 100000.0substance/volume
	AKT_0 0 #original 100000.0substance/volume
	PIP2_nuclear 0 #original 100000.0substance/volume
	PIP2 0 #original 100000.0substance/volume
	Rb_tot_nuclear 1.8066e+26 #original 300000.0substance/volume
	Rb_tot 1.8066e+26 #original 300000.0substance/volume
	SIAH1_tot_nuclear 6.022e+25 #original 100000.0substance/volume
	SIAH1_tot 6.022e+25 #original 100000.0substance/volume
	Bad_tot_cytoplasm 3.6132000000000002e+25 #original 60000.0substance/volume
	Bad_tot 3.6132000000000002e+25 #original 60000.0substance/volume
	BclXL_tot_cytoplasm 6.022e+25 #original 100000.0substance/volume
	BclXL_tot 6.022e+25 #original 100000.0substance/volume
	E2F1_nuclear 0 #original 200000.0substance/volume
	E2F1 0 #original 200000.0substance/volume
	Fourteen33_free_nuclear 0 #original 200000.0substance/volume
	Fourteen33_free 0 #original 200000.0substance/volume
end parameters
begin compartments
	#volume units: volume
	nuclear 3 1.0
	cytoplasm 3 1.0
end compartments
begin molecule types
	#^ bqbiol:hasPart uniprot:Q92934, uniprot:Q07817
	BclXL_Bad_complex(Bad_phosphorylated_Fourteen33_complex~Bad_phosphorylated_Fourteen33_complex~0)
	#^ bqbiol:isVersionOf uniprot:Q9H2X6
	HIPK2()
	#^ bqbiol:isVersionOf uniprot:P60484
	PTEN()
	#^ bqbiol:isVersionOf uniprot:P60484
	#^ bqbiol:hasProperty chebi:CHEBI:33697
	PTENmRNA()
	#^ bqbiol:isVersionOf uniprot:Q00987
	#^ bqbiol:hasProperty pato:PATO:0002220
	Mdm2_cyt_0phosphorylated(Mdm2_cyt_S166S186phosphorylated~Mdm2_cyt_S166S186phosphorylated~0,Mdm2_nuc_S166S186phosphorylated~Mdm2_nuc_S166S186phosphorylated~0)
	#^ bqbiol:isVersionOf uniprot:P31749
	#^ bqbiol:hasProperty pato:PATO:0002220
	AKT_phosphorylated()
	#^ bqbiol:isVersionOf go:GO:0035861
	DNA_double_strand_break()
	#^ bqbiol:isVersionOf uniprot:P42575
	Caspase(pro~PRO~0)
	#^ bqbiol:isVersionOf ncit:C17388
	#^ bqbiol:hasProperty chebi:CHEBI:33697
	p21_mRNA()
	#^ bqbiol:isVersionOf uniprot:Q00987
	#^ bqbiol:hasProperty pato:PATO:0002220
	Mdm2_nuc_S166S186p_S395p()
	PIP3()
	#^ bqbiol:isVersionOf uniprot:Q07812
	#^ bqbiol:hasProperty chebi:CHEBI:33697
	Bax_mRNA()
	#^ bqbiol:isVersionOf uniprot:P04637
	p53_killer(p53_0phosphorylated~p53_0phosphorylated~0,p53_S46phosphorylated~p53_S46phosphorylated~0,p53_arrester~p53_arrester~0)
	#^ bqbiol:isVersionOf uniprot:O15297
	Wip1()
	#^ bqbiol:isVersionOf uniprot:O15297
	#^ bqbiol:hasProperty chebi:CHEBI:33697
	Wip1mRNA()
	#^ bqbiol:isVersionOf uniprot:O96020
	Cyclin_E__free__(p21___free__)
	#^ bqbiol:isVersionOf uniprot:Q07812
	Bax___free__(bclxl___free__)
	#^ bqbiol:isVersionOf uniprot:Q07817
	BclXL___free__(bax___free__)
	#^ bqbiol:isVersionOf uniprot:Q00987
	#^ bqbiol:hasProperty chebi:CHEBI:33697
	Mdm2mRNA()
	#^ bqbiol:isVersionOf uniprot:P06400
	Rb1_0___free__(Rb1_0_E2F1complex~Rb1_0_E2F1complex~0)
	#^ bqbiol:isVersionOf uniprot:Q92934
	Bad_0___free__(Bad_phosphorylated___free__~Bad_phosphorylated___free__~0)
	#^ bqbiol:isVersionOf ncit:C17388
	p21___free__(cyclin_e__free__)
	#^ bqbiol:isVersionOf uniprot:Q8IUQ4
	SIAH1_0()
	#^ bqbiol:isVersionOf uniprot:Q13315
	#^ bqbiol:hasProperty pato:PATO:0002220
	ATM_phosphorylated()
end molecule types
begin seed species
	@nuclear:SIAH1_0() (100000.0) #SIAH1_0
	@nuclear:Rb1_0___free__(Rb1_0_E2F1complex~0) (300000.0) #Rb1_0__free
	@cytoplasm:BclXL___free__(bax___free__) (100000.0) #BclXL__free
	@cytoplasm:Bad_0___free__(Bad_phosphorylated___free__~0) (60000.0) #Bad_0__free
end seed species
begin observables
	Species DNA_double_strand_break_nuclear @nuclear:DNA_double_strand_break() #DNA_double_strand_break
	Species ATM_phosphorylated_nuclear @nuclear:ATM_phosphorylated() #ATM_phosphorylated
	Species SIAH1_0_nuclear @nuclear:SIAH1_0() #SIAH1_0
	Species HIPK2_nuclear @nuclear:HIPK2() #HIPK2
	Species p53_0phosphorylated_nuclear @nuclear:p53_killer(p53_0phosphorylated~p53_0phosphorylated,p53_S46phosphorylated~0,p53_arrester~0) #p53_0phosphorylated
	Species p53_arrester_nuclear @nuclear:p53_killer(p53_0phosphorylated~0,p53_S46phosphorylated~0,p53_arrester~p53_arrester) #p53_arrester
	Species p53_S46phosphorylated_nuclear @nuclear:p53_killer(p53_0phosphorylated~0,p53_S46phosphorylated~p53_S46phosphorylated,p53_arrester~0) #p53_S46phosphorylated
	Species Mdm2_nuc_S166S186phosphorylated_nuclear @nuclear:Mdm2_cyt_0phosphorylated(Mdm2_cyt_S166S186phosphorylated~0,Mdm2_nuc_S166S186phosphorylated~Mdm2_nuc_S166S186phosphorylated) #Mdm2_nuc_S166S186phosphorylated
	Species Wip1_nuclear @nuclear:Wip1() #Wip1
	Species p53_killer_nuclear @nuclear:p53_killer(p53_0phosphorylated~0,p53_S46phosphorylated~0,p53_arrester~0) #p53_killer
	Species Mdm2mRNA_nuclear @nuclear:Mdm2mRNA() #Mdm2 mRNA
	Species Mdm2_cyt_0phosphorylated_cytoplasm @cytoplasm:Mdm2_cyt_0phosphorylated(Mdm2_cyt_S166S186phosphorylated~0,Mdm2_nuc_S166S186phosphorylated~0) #Mdm2_cyt_0phosphorylated
	Species Mdm2_cyt_S166S186phosphorylated_cytoplasm @cytoplasm:Mdm2_cyt_0phosphorylated(Mdm2_cyt_S166S186phosphorylated~Mdm2_cyt_S166S186phosphorylated,Mdm2_nuc_S166S186phosphorylated~0) #Mdm2_cyt_S166S186phosphorylated
	Species AKT_phosphorylated_cytoplasm @cytoplasm:AKT_phosphorylated() #AKT_phosphorylated
	Species Mdm2_nuc_S166S186p_S395p_nuclear @nuclear:Mdm2_nuc_S166S186p_S395p() #Mdm2_nuc_S166S186p_S395p
	Species Wip1mRNA_nuclear @nuclear:Wip1mRNA() #Wip1 mRNA
	Species PTENmRNA_nuclear @nuclear:PTENmRNA() #PTEN mRNA
	Species PTEN_nuclear @nuclear:PTEN() #PTEN
	Species PIP3_nuclear @nuclear:PIP3() #PIP3
	Species p21_mRNA_nuclear @nuclear:p21_mRNA() #p21_mRNA
	Species p21___free___nuclear @nuclear:p21___free__(cyclin_e__free__) #p21_(free)
	Species Cyclin_E__free___nuclear @nuclear:Cyclin_E__free__(p21___free__) #Cyclin_E (free)
	Species Cyclin_E_p21_complex_nuclear @nuclear:p21___free__(cyclin_e__free__!108).Cyclin_E__free__(p21___free__!108) #Cyclin_E:p21_complex
	Species Rb1_0___free___nuclear @nuclear:Rb1_0___free__(Rb1_0_E2F1complex~0) #Rb1_0_(free)
	Species Rb1_0_E2F1complex_nuclear @nuclear:Rb1_0___free__(Rb1_0_E2F1complex~Rb1_0_E2F1complex) #Rb1_0:E2F1 complex
	Species Bax_mRNA_nuclear @nuclear:Bax_mRNA() #Bax_mRNA
	Species Bax___free___nuclear @nuclear:Bax___free__(bclxl___free__) #Bax_(free)
	Species BclXL___free___cytoplasm @cytoplasm:BclXL___free__(bax___free__) #BclXL_(free)
	Species Bax_BclXL_complex_nuclear @nuclear:BclXL___free__(bax___free__!107).Bax___free__(bclxl___free__!107) #Bax:BclXL_complex
	Species Bad_0___free___cytoplasm @cytoplasm:Bad_0___free__(Bad_phosphorylated___free__~0) #Bad_0_(free)
	Species Bad_phosphorylated___free___cytoplasm @cytoplasm:Bad_0___free__(Bad_phosphorylated___free__~Bad_phosphorylated___free__) #Bad_phosphorylated_(free)
	Species proCaspase_nuclear @nuclear:Caspase(pro~PRO) #proCaspase
	Species Caspase_nuclear @nuclear:Caspase(pro~0) #Caspase
	Species BclXL_Bad_complex_cytoplasm @cytoplasm:BclXL_Bad_complex(Bad_phosphorylated_Fourteen33_complex~0) #BclXL_Bad_complex
	Species Bad_phosphorylated_Fourteen33_complex_cytoplasm @cytoplasm:BclXL_Bad_complex(Bad_phosphorylated_Fourteen33_complex~Bad_phosphorylated_Fourteen33_complex) #Bad_phosphorylated_Fourteen33_complex
end observables
begin functions
	BclXL_Bad_complex_ar() = -Bax_BclXL_complex_nuclear - BclXL___free___cytoplasm + BclXL_tot_cytoplasm
	Bad_phosphorylated_Fourteen33_complex_ar() = -Bad_0___free___cytoplasm - Bad_phosphorylated___free___cytoplasm + Bad_tot_cytoplasm - BclXL_Bad_complex_ar
	Fourteen33_free_ar() = -Bad_phosphorylated_Fourteen33_complex_ar + Fourteen33_tot_nuclear
	DNA_DSB_due_to_IR() = DNA_DSB_per_IR_Gy*IR_Gy/tp2
	time_days() = time()/86400
	E2F1_ar() = E2F1_tot_nuclear - Rb1_0_E2F1complex_nuclear
	SIAH1_phosphorylated_ar() = -SIAH1_0_nuclear + SIAH1_tot_nuclear
	PIP2_ar() = -PIP3_nuclear + PIP_tot_nuclear
	AKT_0_ar() = -AKT_phosphorylated_cytoplasm + AKT_tot_nuclear
	Rb_phosphorylated_ar() = -Rb1_0_E2F1complex_nuclear - Rb1_0___free___nuclear + Rb_tot_nuclear
	ATM_0_ar() = -ATM_phosphorylated_nuclear + ATM_tot_nuclear
	h2() = 1.0e-13*can_Caspase_make_DNA_DSB
	rep() = 0.001*has_DNA_DSB_repair
	fRate0() = (DNA_DSB_max - DNA_double_strand_break_nuclear)*(Caspase_nuclear*h2 + DNA_DSB_due_to_IR*h1*is_IR_switched_on)
	fRate1() = rep/(DNA_DSB_RepairCplx_total + DNA_double_strand_break_nuclear)
	fRate2() = Wip1_nuclear*d1
	fRate3() = ATM_0_nuclear*DNA_double_strand_break_nuclear^h*p1/(DNA_double_strand_break_nuclear^h + M1^h)
	fRate4() = ATM_phosphorylated_nuclear*p2
	fRate5() = SIAH1_phosphorylated_nuclear*d2
	fRate7() = HIPK2_nuclear*g7*(Mdm2_nuc_S166S186phosphorylated_nuclear + SIAH1_0_nuclear)^2
	fRate9() = ATM_phosphorylated_nuclear*p3
	fRate11() = p53_0phosphorylated_nuclear*(Mdm2_nuc_S166S186phosphorylated_nuclear^h*g11 + g101)
	fRate12() = Wip1_nuclear*d11
	fRate13() = HIPK2_nuclear*p11
	fRate14() = p53_arrester_nuclear*(Mdm2_nuc_S166S186phosphorylated_nuclear^h*g12 + g101)
	fRate15() = HIPK2_nuclear*p4
	fRate16() = Wip1_nuclear*d4
	fRate17() = ATM_phosphorylated_nuclear*p3
	fRate18() = p53_S46phosphorylated_nuclear*(Mdm2_nuc_S166S186phosphorylated_nuclear^h*g13 + g10)
	fRate19() = p53_killer_nuclear*(Mdm2_nuc_S166S186phosphorylated_nuclear^h*g13 + g10)
	fRate21() = s3*(p53_arrester_nuclear^h*q1_mdm2 + q0_mdm2)/(p53_arrester_nuclear^h*q1_mdm2 + q0_mdm2 + q2)
	fRate23() = Mdm2mRNA_nuclear*t3
	fRate24() = AKT_phosphorylated_cytoplasm*p5
	fRate30() = ATM_phosphorylated_nuclear*p6
	fRate31() = Wip1_nuclear*d6
	fRate34() = s1*(p53_arrester_nuclear^h*q1_wip1 + q0_wip1)/(p53_arrester_nuclear^h*q1_wip1 + q0_wip1 + q2)
	fRate36() = Wip1mRNA_nuclear*t1
	fRate38() = s2*(p53_killer_nuclear^h*q1_pten + q0_pten)/(p53_killer_nuclear^h*q1_pten + q0_pten + q2)
	fRate40() = PTENmRNA_nuclear*t2
	fRate42() = PI3K_tot_nuclear*PIP2_nuclear*p8
	fRate43() = PTEN_nuclear*d7
	fRate44() = AKT_0_cytoplasm*PIP3_nuclear*p12
	fRate46() = s5*(p53_arrester_nuclear^h*q1_p21 + q0_p21)/(p53_arrester_nuclear^h*q1_p21 + q0_p21 + q2)
	fRate48() = p21_mRNA_nuclear*t5
	fRate52() = Rb_phosphorylated_nuclear*d12/(M2 + Rb_phosphorylated_nuclear)
	fRate53() = E2F1_nuclear*b4
	fRate54() = Cyclin_E__free___nuclear*p9
	fRate56() = Cyclin_E__free___nuclear*p10
	fRate58() = E2F1_nuclear^2*s9/(E2F1_nuclear^2 + M3^2)
	fRate61() = s4*(p53_killer_nuclear^h*q1_bax + q0_bax)/(p53_killer_nuclear^h*q1_bax + q0_bax + q2)
	fRate63() = Bax_mRNA_nuclear*t4
	fRate67() = BclXL_Bad_complex_cytoplasm*u2
	fRate69() = AKT_phosphorylated_cytoplasm*BclXL_Bad_complex_cytoplasm*p7
	fRate72() = BclXL_Bad_complex_cytoplasm*u2
	fRate73() = AKT_phosphorylated_cytoplasm*p7
	fRate74() = Bad_phosphorylated_Fourteen33_complex_cytoplasm*d9
	fRate75() = Bad_phosphorylated_Fourteen33_complex_cytoplasm*u3
	fRate76() = AKT_phosphorylated_cytoplasm*BclXL_Bad_complex_cytoplasm*p7
	fRate77() = Fourteen33_free_nuclear*b3
	fRate80() = Bax___free___nuclear*a1
	fRate81() = Caspase_nuclear^2*a2
end functions
begin reaction rules
	DNA_damage_R1_products_0: 0  -> DNA_double_strand_break()@nuclear fRate0() #Modifiers(Caspase, DNA_double_strand_break)
	DNA_Repair_R2: DNA_double_strand_break()@nuclear -> 0  fRate1()
	Dephoshorylation_by_Wip1_R3: ATM_phosphorylated()@nuclear -> 0  fRate2() #Modifiers(Wip1)
	Phoshorylation_due_to_IR_R4: 0  -> ATM_phosphorylated()@nuclear fRate3() #Modifiers(ATM_0, DNA_double_strand_break)
	Phosphorylation_by_ATM_p_R5: SIAH1_0()@nuclear -> 0  fRate4() #Modifiers(ATM_phosphorylated)
	Dephosphorylation_of_SIAH1_p_R6: 0  -> SIAH1_0()@nuclear fRate5() #Modifiers(SIAH1_phosphorylated)
	Synthesis_of_HIPK2_R7: 0  -> HIPK2()@nuclear s8
	Degradation_induced_by_Mdm2_nuc_S166S186p_and_SIAH1_R8_reactants_0: 0  -> HIPK2()@nuclear -1*(fRate7()) #Modifiers(SIAH1_0, Mdm2_nuc_S166S186phosphorylated)
	Synthesis_of_p53_0p_R9: 0  -> p53_killer(p53_0phosphorylated~p53_0phosphorylated,p53_S46phosphorylated~0,p53_arrester~0)@nuclear s6
	Phosphorylation_by_ATM_p_on_Ser15_and_Ser20_R10: p53_killer(p53_0phosphorylated~p53_0phosphorylated,p53_S46phosphorylated~0,p53_arrester~0)@nuclear -> p53_killer(p53_0phosphorylated~0,p53_S46phosphorylated~0,p53_arrester~p53_arrester)@nuclear fRate9() #Modifiers(ATM_phosphorylated)
	Dephosphorylation_spontaneous_of_p53_arrester_R11: p53_killer(p53_0phosphorylated~0,p53_S46phosphorylated~0,p53_arrester~p53_arrester)@nuclear -> p53_killer(p53_0phosphorylated~p53_0phosphorylated,p53_S46phosphorylated~0,p53_arrester~0)@nuclear d3
	Degradation_spontanuous_and_induced_by_Mdm2_nuc_S166S186p__R12_reactants_0: 0  -> p53_killer(p53_0phosphorylated~p53_0phosphorylated,p53_S46phosphorylated~0,p53_arrester~0)@nuclear -1*(fRate11()) #Modifiers(Mdm2_nuc_S166S186phosphorylated)
	Dephosphorylation_of_Ser46_by_Wip1_R13: p53_killer(p53_0phosphorylated~0,p53_S46phosphorylated~p53_S46phosphorylated,p53_arrester~0)@nuclear -> p53_killer(p53_0phosphorylated~p53_0phosphorylated,p53_S46phosphorylated~0,p53_arrester~0)@nuclear fRate12() #Modifiers(Wip1)
	Phosphorylation_at_Ser46_by_HIPK2_R14: p53_killer(p53_0phosphorylated~p53_0phosphorylated,p53_S46phosphorylated~0,p53_arrester~0)@nuclear -> p53_killer(p53_0phosphorylated~0,p53_S46phosphorylated~p53_S46phosphorylated,p53_arrester~0)@nuclear fRate13() #Modifiers(HIPK2)
	Degradation_spontaneous_and_induced_by_Mdm2_nuc_S166S186p_R15_reactants_0: 0  -> p53_killer(p53_0phosphorylated~0,p53_S46phosphorylated~0,p53_arrester~p53_arrester)@nuclear -1*(fRate14()) #Modifiers(Mdm2_nuc_S166S186phosphorylated)
	Phosphorylation_at_Ser46_by_HIPK2_R16: p53_killer(p53_0phosphorylated~0,p53_S46phosphorylated~0,p53_arrester~p53_arrester)@nuclear -> p53_killer(p53_0phosphorylated~0,p53_S46phosphorylated~0,p53_arrester~0)@nuclear fRate15() #Modifiers(HIPK2)
	Dephosphorylation_at_Ser46_by_Wip1_R17: p53_killer(p53_0phosphorylated~0,p53_S46phosphorylated~0,p53_arrester~0)@nuclear -> p53_killer(p53_0phosphorylated~0,p53_S46phosphorylated~0,p53_arrester~p53_arrester)@nuclear fRate16() #Modifiers(Wip1)
	Phosphorylation_by_ATM_p_on_Ser15_and_Ser20_R18: p53_killer(p53_0phosphorylated~0,p53_S46phosphorylated~p53_S46phosphorylated,p53_arrester~0)@nuclear -> p53_killer(p53_0phosphorylated~0,p53_S46phosphorylated~0,p53_arrester~0)@nuclear fRate17() #Modifiers(ATM_phosphorylated)
	Degradation_spontaneous_and_induced_by_Mdm2_nuc_S166S186p_R19_reactants_0: 0  -> p53_killer(p53_0phosphorylated~0,p53_S46phosphorylated~p53_S46phosphorylated,p53_arrester~0)@nuclear -1*(fRate18()) #Modifiers(Mdm2_nuc_S166S186phosphorylated)
	Degradation_spontaneous_and_induced_by_Mdm2_nuc_S166S186p_R20_reactants_0: 0  -> p53_killer(p53_0phosphorylated~0,p53_S46phosphorylated~0,p53_arrester~0)@nuclear -1*(fRate19()) #Modifiers(Mdm2_nuc_S166S186phosphorylated)
	Dephosphorylation_of_Ser15_and_Ser20_R21: p53_killer(p53_0phosphorylated~0,p53_S46phosphorylated~0,p53_arrester~0)@nuclear -> p53_killer(p53_0phosphorylated~0,p53_S46phosphorylated~p53_S46phosphorylated,p53_arrester~0)@nuclear d10
	Transcription_Mdm2_gene_transcription_R22: 0  -> Mdm2mRNA()@nuclear fRate21() #Modifiers(p53_arrester)
	Degradation_spontaneous_R23: Mdm2mRNA()@nuclear -> 0  g3
	Translation_of_mdm2_R24: 0  -> Mdm2_cyt_0phosphorylated(Mdm2_cyt_S166S186phosphorylated~0,Mdm2_nuc_S166S186phosphorylated~0)@cytoplasm fRate23() #Modifiers(Mdm2_mRNA)
	Phosphorylation_of_Mdm2_cyt_0_by_AKT_p_R25: Mdm2_cyt_0phosphorylated(Mdm2_cyt_S166S186phosphorylated~0,Mdm2_nuc_S166S186phosphorylated~0)@cytoplasm -> Mdm2_cyt_0phosphorylated(Mdm2_cyt_S166S186phosphorylated~Mdm2_cyt_S166S186phosphorylated,Mdm2_nuc_S166S186phosphorylated~0)@cytoplasm fRate24() #Modifiers(AKT_phosphorylated)
	Dephosphorylation_at_Ser166_and_186_R26: Mdm2_cyt_0phosphorylated(Mdm2_cyt_S166S186phosphorylated~Mdm2_cyt_S166S186phosphorylated,Mdm2_nuc_S166S186phosphorylated~0)@cytoplasm -> Mdm2_cyt_0phosphorylated(Mdm2_cyt_S166S186phosphorylated~0,Mdm2_nuc_S166S186phosphorylated~0)@cytoplasm d5
	Degradation_spontaneous_R27: Mdm2_cyt_0phosphorylated(Mdm2_cyt_S166S186phosphorylated~0,Mdm2_nuc_S166S186phosphorylated~0)@cytoplasm -> 0  g14
	Nuclear_import_of_Mdm2_cyto_S166S186p_R28: Mdm2_cyt_0phosphorylated(Mdm2_cyt_S166S186phosphorylated~Mdm2_cyt_S166S186phosphorylated,Mdm2_nuc_S166S186phosphorylated~0)@cytoplasm -> Mdm2_cyt_0phosphorylated(Mdm2_cyt_S166S186phosphorylated~0,Mdm2_nuc_S166S186phosphorylated~Mdm2_nuc_S166S186phosphorylated)@nuclear i1
	Degradation_spontaneous_R29: Mdm2_cyt_0phosphorylated(Mdm2_cyt_S166S186phosphorylated~Mdm2_cyt_S166S186phosphorylated,Mdm2_nuc_S166S186phosphorylated~0)@cytoplasm -> 0  g15
	Degradation_spontaneous_R30: Mdm2_cyt_0phosphorylated(Mdm2_cyt_S166S186phosphorylated~0,Mdm2_nuc_S166S186phosphorylated~Mdm2_nuc_S166S186phosphorylated)@nuclear -> 0  g15
	Phosphorylation_by_ATM_p_at_Ser395_R31: Mdm2_cyt_0phosphorylated(Mdm2_cyt_S166S186phosphorylated~0,Mdm2_nuc_S166S186phosphorylated~Mdm2_nuc_S166S186phosphorylated)@nuclear -> Mdm2_nuc_S166S186p_S395p()@nuclear fRate30() #Modifiers(ATM_phosphorylated)
	Dephosphorylation_of_Ser395_of_Mdm2_nuc_S166S186p_S395p_by_Wip1_R32: Mdm2_nuc_S166S186p_S395p()@nuclear -> Mdm2_cyt_0phosphorylated(Mdm2_cyt_S166S186phosphorylated~0,Mdm2_nuc_S166S186phosphorylated~Mdm2_nuc_S166S186phosphorylated)@nuclear fRate31() #Modifiers(Wip1)
	Degradation_spontaneous_R33: Mdm2_nuc_S166S186p_S395p()@nuclear -> 0  g15
	Degradation_Ser395p_dependent_R34: Mdm2_nuc_S166S186p_S395p()@nuclear -> 0  g16
	Transcription_of_Wip1_gene_R35: 0  -> Wip1mRNA()@nuclear fRate34() #Modifiers(p53_arrester)
	Degradation_R36: Wip1mRNA()@nuclear -> 0  g1
	Translation_of_Wip_mRNA_R37: 0  -> Wip1()@nuclear fRate36() #Modifiers(Wip1_mRNA)
	Translation_of_Wip_mRNA_R38: Wip1()@nuclear -> 0  g8
	Transcription_of_PTEN_gene_R39: 0  -> PTENmRNA()@nuclear fRate38() #Modifiers(p53_killer)
	Degradation_R40: PTENmRNA()@nuclear -> 0  g2
	Translation_of_PTEN_mRNA_R41: 0  -> PTEN()@nuclear fRate40() #Modifiers(PTEN_mRNA)
	Degradation_of_PTEN_R42: PTEN()@nuclear -> 0  g6
	Phopshorylation_of_PIP2_by_PI3K_R43: 0  -> PIP3()@nuclear fRate42() #Modifiers(PIP2, PI3K_tot)
	Dephosphorylation_of_PIP3_by_PTENR44: PIP3()@nuclear -> 0  fRate43() #Modifiers(PTEN)
	Phopshorylation_at_PIP3_R45: 0  -> AKT_phosphorylated()@cytoplasm fRate44() #Modifiers(AKT_0, PIP3)
	Dephosphorylation_of_AKT_R46: AKT_phosphorylated()@cytoplasm -> 0  d8
	Transcription_of_p21_gene_R47: 0  -> p21_mRNA()@nuclear fRate46() #Modifiers(p53_arrester)
	Degradation_of_p21_mRNA_R48: p21_mRNA()@nuclear -> 0  g5
	Translation_of_p21_mRNA_R49: 0  -> p21___free__(cyclin_e__free__)@nuclear fRate48() #Modifiers(p21_mRNA)
	Binding_of_Cyclin_E_and_p21_R50: p21___free__(cyclin_e__free__)@nuclear + Cyclin_E__free__(p21___free__)@nuclear -> p21___free__(cyclin_e__free__!108)@nuclear.Cyclin_E__free__(p21___free__!108)@nuclear b5
	Dissociation_of_complex_Cyclin_E_p21_R51: p21___free__(cyclin_e__free__!108)@nuclear.Cyclin_E__free__(p21___free__!108)@nuclear -> p21___free__(cyclin_e__free__)@nuclear + Cyclin_E__free__(p21___free__)@nuclear u6
	Degradation_of_p21_R52: p21___free__(cyclin_e__free__)@nuclear -> 0  g19
	Dephosphorylation_of_Rb1_at_S567_R53: 0  -> Rb1_0___free__(Rb1_0_E2F1complex~0)@nuclear fRate52() #Modifiers(Rb_phosphorylated)
	Binding_of_Rb1_and_E2F1_R54: Rb1_0___free__(Rb1_0_E2F1complex~0)@nuclear -> Rb1_0___free__(Rb1_0_E2F1complex~Rb1_0_E2F1complex)@nuclear fRate53() #Modifiers(E2F1)
	Phosphorylation_of_Rb1_by_Cyclin_E__R55: Rb1_0___free__(Rb1_0_E2F1complex~0)@nuclear -> 0  fRate54() #Modifiers(Cyclin_E__free)
	Dissociation_of_Rb1_E2F1_complex_R56: Rb1_0___free__(Rb1_0_E2F1complex~Rb1_0_E2F1complex)@nuclear -> Rb1_0___free__(Rb1_0_E2F1complex~0)@nuclear u5
	Phosphorylation_of_Rb1_in_Rb1_E2F1_complex_by_Cyclin_ER57: Rb1_0___free__(Rb1_0_E2F1complex~Rb1_0_E2F1complex)@nuclear -> 0  fRate56() #Modifiers(Cyclin_E__free)
	Synthesis_R58: 0  -> Cyclin_E__free__(p21___free__)@nuclear s10
	Synthesis_induced_by_E2F1_R59: 0  -> Cyclin_E__free__(p21___free__)@nuclear fRate58() #Modifiers(E2F1)
	Degradation_R60: Cyclin_E__free__(p21___free__)@nuclear -> 0  g20
	Degradation_R61: p21___free__(cyclin_e__free__!108)@nuclear.Cyclin_E__free__(p21___free__!108)@nuclear -> 0  g20
	Transcription_of_Bax_gene_R62: 0  -> Bax_mRNA()@nuclear fRate61() #Modifiers(p53_killer)
	Degradation_of_Bax_mRNA_R63: Bax_mRNA()@nuclear -> 0  g4
	Translation_of_Bax_mRNA_R64: 0  -> Bax___free__(bclxl___free__)@nuclear fRate63() #Modifiers(Bax_mRNA)
	Dissociation_of_Bax_BclXL_complex_R65: BclXL___free__(bax___free__!107)@nuclear.Bax___free__(bclxl___free__!107)@nuclear -> Bax___free__(bclxl___free__)@nuclear + BclXL___free__(bax___free__)@cytoplasm u1
	Binding_of_Bax_and_BclXL_R66: Bax___free__(bclxl___free__)@nuclear + BclXL___free__(bax___free__)@cytoplasm -> BclXL___free__(bax___free__!107)@nuclear.Bax___free__(bclxl___free__!107)@nuclear b1
	Degradation_R67: Bax___free__(bclxl___free__)@nuclear -> 0  g9
	Dissociation_of_BclXL_Bad_complex_R68: 0  -> BclXL___free__(bax___free__)@cytoplasm fRate67() #Modifiers(BclXL_Bad_complex)
	Degradation_of_Bax_in_Bax_BclXL_complex_R69: BclXL___free__(bax___free__!107)@nuclear.Bax___free__(bclxl___free__!107)@nuclear -> BclXL___free__(bax___free__)@cytoplasm g16
	Phosphorylation_of_Bad_in_BclXL_Bad_complex_R70: 0  -> BclXL___free__(bax___free__)@cytoplasm fRate69() #Modifiers(AKT_phosphorylated, BclXL_Bad_complex)
	Binding_of_BclXL_and_Bad_0_R71: BclXL___free__(bax___free__)@cytoplasm + Bad_0___free__(Bad_phosphorylated___free__~0)@cytoplasm -> 0  b2
	Dephosphorylation_R72: Bad_0___free__(Bad_phosphorylated___free__~Bad_phosphorylated___free__)@cytoplasm -> Bad_0___free__(Bad_phosphorylated___free__~0)@cytoplasm d9
	Dissociation_of_BclXL_Bad_complex_R73: 0  -> Bad_0___free__(Bad_phosphorylated___free__~0)@cytoplasm fRate72() #Modifiers(BclXL_Bad_complex)
	Phosphorylation_of_Bad_0_by_AKT_p_R74: Bad_0___free__(Bad_phosphorylated___free__~0)@cytoplasm -> Bad_0___free__(Bad_phosphorylated___free__~Bad_phosphorylated___free__)@cytoplasm fRate73() #Modifiers(AKT_phosphorylated)
	Dephosphorylation_and_dissociation_of_Bad_p_in_Bad_14_3_3_complex_R75: 0  -> Bad_0___free__(Bad_phosphorylated___free__~0)@cytoplasm fRate74() #Modifiers(Bad_phosphorylated_Fourteen33_complex)
	Dissociation_of_Bad_14_3_3_complex_R76: 0  -> Bad_0___free__(Bad_phosphorylated___free__~Bad_phosphorylated___free__)@cytoplasm fRate75() #Modifiers(Bad_phosphorylated_Fourteen33_complex)
	Phosphorylation_of_Bad_in_BclXL_Bad_complex_and_complex_Dissociation_R77: 0  -> Bad_0___free__(Bad_phosphorylated___free__~Bad_phosphorylated___free__)@cytoplasm fRate76() #Modifiers(AKT_phosphorylated, BclXL_Bad_complex)
	Binding_of_Bad_p_and_14_3_3_R78: Bad_0___free__(Bad_phosphorylated___free__~Bad_phosphorylated___free__)@cytoplasm -> 0  fRate77() #Modifiers(Fourteen33_free)
	Synthesis_of_proCaspase_R79: 0  -> Caspase(pro~PRO)@nuclear s7
	Degradation_of_proCaspase_R80: Caspase(pro~PRO)@nuclear -> 0  g17
	Activation_of_caspases_by_active__free__Bax_R81: Caspase(pro~PRO)@nuclear -> Caspase(pro~0)@nuclear fRate80() #Modifiers(Bax__free)
	Activation_autoactivation_of_caspases_R82: Caspase(pro~PRO)@nuclear -> Caspase(pro~0)@nuclear fRate81()
	Degradation_of_caspases_R83: Caspase(pro~0)@nuclear -> 0  g18
end reaction rules
end model
