###
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/29856829']
#@BQB_HAS_PROPERTY:['http://identifiers.org/go/GO:0007049', 'http://identifiers.org/go/GO:0044838', 'http://identifiers.org/mamo/MAMO_0000046']
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL2006220001', 'http://identifiers.org/biomodels.db/BIOMD0000000954']
#@creatorEmail:'ahmad.azd@hotmail.com'
#@creatorName:'Zyoud Ahmad'
#@notes:'This is an atomized translation of an SBML model created on 14/08/2021. The original model has 25 molecules and 36 reactions. The translated model has 18 molecules and 36 rules'
###
begin model
begin parameters
	S 1.0
	Ksm 0.1
	Kdm 0.1
	Kscycdm 0.004
	Kscycds 0.004
	Kdcycd 0.008
	Kscyceb 0.0001
	Kscyce 0.004
	Kdcyce 0.001
	Kdcycea 0.01
	Khcyce 0.25
	Kscyca 0.008
	Kdcyca 0.004
	Kdcycac 0.5
	Khcyca 0.1
	Kse2f 0.004
	Kde2f 0.003
	Kde2fa 0.01
	Khe2f 0.25
	RbT 1.0
	Kase2f 100.0
	Kdise2f 1.0
	Kprb 5.0
	Kdprbp 1.0
	Kppeb 0.5
	Kdprbpp 0.1
	Kprbp 2.0
	JpRb 0.01
	JpRbp 0.05
	JdpRb 0.05
	JppRb 0.5
	Kscki 0.04
	Kdcki 0.2
	Kascki 100.0
	Kdiscki 0.1
	Ksub1 0.004
	Kdub1 0.002
	Kdub1c 0.2
	Ksemi1 0.45
	Kdemi1 0.2
	Kdemi1c 2.0
	Khemi1 0.1
	Kascdh1 100.0
	Kdiscdh1 0.1
	Kacdh1 0.1
	Kicdh1e 0.14
	Kicdh1a 0.2
	JdpCdh1 0.02
	JpCdh1 0.25
	Kse2fb 0.0003
	Kdckic 1.0
	Kscycem 0
	Kse2fm 0
	E2F 6.0219999999999e+17 #original 0.001substance/volume
	Rb -6.38332e+19 #original 0.894substance/volume
	CycE 2.40879999999999e+18 #original 0.00399999999999999substance/volume
	Cdh1p -98304.0 #original 1.12757025938492e-16substance/volume
	Cdh1T 6.022e+20 #original 1.0substance/volume
end parameters
begin molecule types
	#^ bqbiol:hasProperty pato:PATO:0002220, go:GO:0035189
	Comp2()
	#^ bqbiol:hasProperty uniprot:P24385, ncit:C2185
	CycDCki()
	#^ bqbiol:hasProperty ncit:C44044, uniprot:P06400, pato:PATO:0002262
	Rbp()
	#^ bqbiol:hasProperty ncit:C2185, uniprot:P24864
	CycECki()
	#^ bqbiol:hasProperty ncit:C17648, pato:PATO:0002262, uniprot:P06400
	Rbpp()
	#^ bqbiol:hasProperty ncit:C16796, ncit:C17227
	UbI()
	#^ bqbiol:hasProperty ncit:C2185, ncit:C25304
	CkiT()
	#^ bqbiol:hasProperty ncit:C25304, uniprot:P24864
	CycET()
	#^ bqbiol:hasProperty ncit:C47881, uniprot:Q9UKT4, uniprot:Q9UM11, pato:PATO:0002220, pato:PATO:0002263
	EmiC()
	#^ bqbiol:hasProperty ncit:C25304, pato:PATO:0002263, uniprot:Q9UM11
	Cdh1dp()
	#^ bqbiol:hasProperty omit:0006811, uniprot:Q9UM11, pato:PATO:0002263
	Cdh1()
	#^ bqbiol:hasProperty ncit:C2185, uniprot:P20248
	CycACki()
	#^ bqbiol:hasProperty ncit:C25304, uniprot:P20248
	CycAT()
	#^ bqbiol:hasProperty ncit:C25304, uniprot:Q9UKT4
	Emi1T()
	#^ bqbiol:hasProperty ncit:C25304, uniprot:PR:000050007
	E2FT()
	#^ bqbiol:hasProperty uniprot:P01106
	Myc()
	#^ bqbiol:hasProperty go:GO:0035189
	Comp1()
	#^ bqbiol:hasProperty uniprot:P24385, ncit:C25304
	CycDT()
end molecule types
begin seed species
	CycET() 7.16618e+19 # (0.119 * 0.001)mol/L * 6.022e23/mol *1.0L #CycET #CycET
	E2FT() 6.38332e+19 #original 0.106substance/volume #E2FT #E2FT
	Comp1() 6.323100000000001e+19 #original 0.105substance/volume #Comp1 #Comp1
	CkiT() 1.2044000000000002e+20 #original 0.2substance/volume #CkiT #CkiT
	CycECki() 6.925300000000001e+19 #original 0.115substance/volume #CycECki #CycECki
	Cdh1dp() 6.022e+20 #original 1.0substance/volume #Cdh1dp #Cdh1dp
	Emi1T() 1.2044e+18 #original 0.002substance/volume #Emi1T #Emi1T
	EmiC() 1.2044e+18 #original 0.002substance/volume #EmiC #EmiC
	Cdh1() 6.009956000000001e+20 #original 0.998substance/volume #Cdh1 #Cdh1
	UbI() 1.2044000000000002e+19 #original 0.02substance/volume #UbI #UbI
	Rbpp() 6.022e+17 #original 0.001substance/volume #Rbpp #Rbpp
end seed species
begin observables
	Species Myc Myc() #Myc
	Species CycDT CycDT() #CycDT
	Species CycET CycET() #CycET
	Species CycAT CycAT() #CycAT
	Species E2FT E2FT() #E2FT
	Species Comp1 Comp1() #Comp1
	Species Comp2 Comp2() #Comp2
	Species Rbp Rbp() #Rbp
	Species CkiT CkiT() #CkiT
	Species CycECki CycECki() #CycECki
	Species CycDCki CycDCki() #CycDCki
	Species CycACki CycACki() #CycACki
	Species Cdh1dp Cdh1dp() #Cdh1dp
	Species Emi1T Emi1T() #Emi1T
	Species EmiC EmiC() #EmiC
	Species Cdh1 Cdh1() #Cdh1
	Species UbI UbI() #UbI
	Species Rbpp Rbpp() #Rbpp
end observables
begin functions
	E2F_ar() = -Comp1 - Comp2 + E2FT
	Cdh1p_ar() = -Cdh1 + Cdh1T - EmiC
	CycD_ar() = -CycDCki + CycDT
	CycE_ar() = -CycECki + CycET
	CycA_ar() = -CycACki + CycAT
	Rb_ar() = -Comp1 - Comp2 + RbT - Rbp - Rbpp
	fRate0() = Ksm*S
	fRate2() = Kscycdm*Myc + 1.0*Kscycds*S
	fRate4() = (E2F_ar*Kscyce + 1.0*Kscyceb*(E2F_ar + Khcyce) + Kscycem*Myc*(E2F_ar + Khcyce))/(1.0*E2F_ar + 1.0*Khcyce)
	fRate5() = CycET*(CycA_ar*Kdcycea + Kdcyce)
	fRate6() = E2F_ar*Kscyca/(E2F_ar + Khcyca)
	fRate7() = CycAT*(Cdh1*Kdcycac + Kdcyca)
	fRate8() = (E2F_ar*Kse2f + 1.0*Kse2fb*(E2F_ar + Khe2f) + Kse2fm*Myc*(E2F_ar + Khe2f))/(1.0*E2F_ar + 1.0*Khe2f)
	fRate9() = E2FT*(CycA_ar*Kde2fa + Kde2f)
	fRate10() = (Comp2*Kdprbp + 1.0*E2F_ar*Kase2f*Rb_ar*(Comp2 + JdpRb))/(1.0*Comp2 + 1.0*JdpRb)
	fRate11() = 1.0*Comp1*CycD_ar*Kprb/(Comp1 + JpRb) + 1.0*Comp1*Kdise2f + 1.0*Comp1*Kppeb*(CycA_ar + CycE_ar)/(Comp1 + JppRb) + 1.0*Comp1*(CycA_ar*Kde2fa + Kde2f)
	fRate12() = (Comp1*CycD_ar*Kprb + 1.0*E2F_ar*Kase2f*Rbp*(Comp1 + JpRb))/(1.0*Comp1 + 1.0*JpRb)
	fRate13() = 1.0*Comp2*Kdise2f + 1.0*Comp2*Kdprbp/(Comp2 + JdpRb) + 1.0*Comp2*Kprbp*(CycA_ar + CycE_ar)/(Comp2 + JpRbp) + 1.0*Comp2*(CycA_ar*Kde2fa + Kde2f)
	fRate14() = (Comp2*(JpRb + Rb_ar)*(CycA_ar*Kde2fa + Kde2f + Kdise2f) + 1.0*CycD_ar*Kprb*Rb_ar)/(1.0*JpRb + 1.0*Rb_ar)
	fRate15() = 1.0*E2F_ar*Kase2f*Rbp + 1.0*Kdprbp*Rbp/(JpRb + Rbp) + 1.0*Kprbp*Rbp*(CycA_ar + CycE_ar)/(JpRbp + Rbp)
	fRate17() = CkiT*(Kdcki + Kdckic*UbI*(CycA_ar + CycE_ar))
	fRate18() = CycE_ar*Kascki*(CkiT - CycACki - CycDCki - CycECki)
	fRate19() = CycECki*(CycA_ar*Kdcycea + Kdcki + Kdckic*UbI*(CycA_ar + CycE_ar) + Kdcyce + Kdiscki)
	fRate20() = CycD_ar*Kascki*(CkiT - CycACki - CycDCki - CycECki)
	fRate21() = CycDCki*(Kdcki + Kdckic*UbI*(CycA_ar + CycE_ar) + Kdcycd + Kdiscki)
	fRate22() = CycA_ar*Kascki*(CkiT - CycACki - CycDCki - CycECki)
	fRate23() = CycACki*(Cdh1*Kdcycac + Kdcki + Kdckic*UbI*(CycA_ar + CycE_ar) + Kdcyca + Kdiscki)
	fRate24() = Cdh1T*Kacdh1/(Cdh1T - Cdh1dp + JdpCdh1)
	fRate24m() = Kacdh1/(Cdh1T - Cdh1dp + JdpCdh1)
	fRate25() = Cdh1dp*(CycA_ar*Kicdh1a + CycE_ar*Kicdh1e)/(Cdh1dp + JpCdh1)
	fRate26() = E2F_ar*Ksemi1/(E2F_ar + Khemi1)
	fRate27() = Emi1T*(Cdh1*Kdemi1c + Kdemi1)
	fRate28() = Kascdh1*(Cdh1T - EmiC)*(Emi1T - EmiC)
	fRate29() = EmiC*(Cdh1*Kdemi1c + Kdemi1 + Kdiscdh1)
	fRate30() = 1.0*Kacdh1*(-Cdh1 + Cdh1T - EmiC)/(Cdh1T - Cdh1dp + JdpCdh1) + 1.0*(-Cdh1 + Cdh1dp)*(Cdh1*Kdemi1c + Kdemi1 + Kdiscdh1)
	fRate31() = 1.0*Cdh1*Kascdh1*(Emi1T - EmiC) + 1.0*Cdh1*(CycA_ar*Kicdh1a + CycE_ar*Kicdh1e)/(Cdh1dp + JpCdh1)
	fRate33() = UbI*(Cdh1*Kdub1c + Kdub1)
	fRate34() = (CycA_ar + CycE_ar)*(Comp1*Kppeb*(Comp2 + JpRbp)*(JpRbp + Rbp)*(JppRb + Rb_ar) + Comp2*Kprbp*(Comp1 + JppRb)*(JpRbp + Rbp)*(JppRb + Rb_ar) + Kppeb*Rb_ar*(Comp1 + JppRb)*(Comp2 + JpRbp)*(JpRbp + Rbp) + 1.0*Kprbp*Rbp*(Comp1 + JppRb)*(Comp2 + JpRbp)*(JppRb + Rb_ar))/((1.0*Comp1 + 1.0*JppRb)*(Comp2 + JpRbp)*(JpRbp + Rbp)*(JppRb + Rb_ar))
	fRate35() = Kdprbpp/(JdpRb + Rbpp)
end functions
begin reaction rules
	reaction_for_Myc_production: 0  -> Myc() fRate0()
	reaction_for_Myc_decay: Myc() -> 0  Kdm
	reaction_for_CycDT_production: 0  -> CycDT() fRate2() #Modifiers(Myc)
	reaction_CycDT_decay: CycDT() -> 0  Kdcycd
	reaction_for_CycET_production: 0  -> CycET() fRate4() #Modifiers(Myc, E2F)
	reaction_CycET_decay_reactants_0: 0  -> CycET() -1*(fRate5()) #Modifiers(CycA)
	reaction_for_CycAT_production: 0  -> CycAT() fRate6() #Modifiers(E2F)
	reaction_CycAT_decay_reactants_0: 0  -> CycAT() -1*(fRate7()) #Modifiers(Cdh1)
	reaction_for_E2FT_production: 0  -> E2FT() fRate8() #Modifiers(Myc, E2F)
	reaction_E2FT_decay_reactants_0: 0  -> E2FT() -1*(fRate9()) #Modifiers(CycA)
	reaction_Comp1_production: 0  -> Comp1() fRate10() #Modifiers(E2F, Rb, Comp2)
	reaction_Comp1_decay_reactants_0: 0  -> Comp1() -1*(fRate11()) #Modifiers(CycD, CycE, CycA)
	reaction_for_Comp2_production: 0  -> Comp2() fRate12() #Modifiers(E2F, Rbp, CycD, Comp1)
	reaction_Comp2_decay_reactants_0: 0  -> Comp2() -1*(fRate13()) #Modifiers(CycE, CycA)
	reactionfor_Rbp_production: 0  -> Rbp() fRate14() #Modifiers(CycD, Rb, Comp2, CycA)
	reaction_for_Rbp_decay_reactants_0: 0  -> Rbp() -1*(fRate15()) #Modifiers(E2F, CycE, CycA)
	reaction_for_CkiT_production: 0  -> CkiT() Kscki
	reaction_for_CkiT_decay_reactants_0: 0  -> CkiT() -1*(fRate17()) #Modifiers(CycE, CycA, UbI)
	reaction_for_CycECki_production_products_0: 0  -> CycECki() fRate18() #Modifiers(CycE, CkiT, CycDCki, CycACki)
	reaction_for_CycECki_decay_reactants_0: 0  -> CycECki() -1*(fRate19()) #Modifiers(CycA, CycE, UbI)
	reaction_for_CycDCki_production_products_0: 0  -> CycDCki() fRate20() #Modifiers(CycD, CkiT, CycECki, CycACki)
	reaction_for_CycDCki_decay_reactants_0: 0  -> CycDCki() -1*(fRate21()) #Modifiers(CycE, CycA, UbI)
	reaction_for_CycACki_production_products_0: 0  -> CycACki() fRate22() #Modifiers(CycA, CkiT, CycECki, CycDCki)
	reaction_for_CycACki_decay_reactants_0: 0  -> CycACki() -1*(fRate23()) #Modifiers(Cdh1, CycE, CycA, UbI)
	reaction_for_Cdh1dp_production: 0  <-> Cdh1dp() fRate24(),fRate24m() #Modifiers(Cdh1T)
	reaction_for_Cdh1dp_decay_reactants_0: 0  -> Cdh1dp() -1*(fRate25()) #Modifiers(CycE, CycA)
	reaction_for_Emi1T_production: 0  -> Emi1T() fRate26() #Modifiers(E2F)
	reaction_for_Emi1T_decay_reactants_0: 0  -> Emi1T() -1*(fRate27()) #Modifiers(Cdh1)
	reaction_for_EmiC_production_products_0: 0  -> EmiC() fRate28() #Modifiers(Cdh1T, Emi1T)
	reaction_for_EmiC_decay_reactants_0: 0  -> EmiC() -1*(fRate29()) #Modifiers(Cdh1)
	reaction_for_Cdh1_production_products_0: 0  -> Cdh1() fRate30() #Modifiers(Cdh1T, EmiC, Cdh1dp)
	reaction_for_Cdh1_decay_reactants_0: 0  -> Cdh1() -1*(fRate31()) #Modifiers(CycE, CycA, Cdh1dp, Emi1T, EmiC)
	reaction_for_UbI_production: 0  -> UbI() Ksub1
	reaction_for_UbI_decay_reactants_0: 0  -> UbI() -1*(fRate33()) #Modifiers(Cdh1)
	reaction_for_Rbpp_production: 0  -> Rbpp() fRate34() #Modifiers(CycE, CycA, Rbp, Comp2, Rb, Comp1)
	reaction_for_Rbpp_decay: Rbpp() -> 0  fRate35()
end reaction rules
end model
