###
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/32696599']
#@BQB_IS:['http://identifiers.org/biomodels.db/MODEL2005110001']
#@BQB_OCCURS_IN:['http://identifiers.org/bto/BTO:0004126']
#@BQB_HAS_PROPERTY:['http://identifiers.org/taxonomy/9606', 'http://identifiers.org/mamo/MAMO_0000046', 'http://identifiers.org/go/GO:0060338']
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL2005110001', 'http://identifiers.org/biomodels.db/BIOMD0000000959']
#@creatorEmail:'tiwarik@babraham.ac.uk'
#@creatorName:'Tiwari Krishna'
#@notes:'This is an atomized translation of an SBML model created on 14/08/2021. The original model has 41 molecules and 75 reactions. The translated model has 17 molecules and 75 rules'
###
begin model
begin parameters
	r1_v 16.980000
	r2_k1 0.000021
	r3_degRecBySOCS 0.010280
	r4_BindIFN 0.059300
	r4_kinhBySOCS 889.400000
	r4_kinhByUSP18 0.000136
	r5_k1 19840.000000
	r6_degaRecIFNBySOCS 0.883700
	r7_degByUSP18 0.016440
	r8_degBySOCSandUSP18 27.820000
	r9_k1 0.671900
	r10_ComplFormSTAT1STAT2c 0.001112
	r11_k1 0.185500
	r12_k1 1.187000
	r13_k1 0.008975
	r14_k1 0.863600
	r15_k1 3.407000
	r16_ComplFormSTAT1dimc 0.000007
	r17_k1 4.296000
	r18_k1 10.530000
	r19_genOccGAS_ISREbsByISGF3n 0.000358
	r20_genOccGAS_ISREbsBySTAT1STAT2n 0.000297
	r21_k1 0.551900
	r22_genOccGASbsBySTAT1dimn 1395.000000
	r23_k1 1395.000000
	r24_k1 0.499600
	r25_k1 0.970200
	r26_k1 0.097020
	r27_k1 0.146800
	r28_k1 1.810000
	r29_k1 0.181000
	r30_k1 2981.000000
	r31_k1 298.100000
	r32_k1 0.202800
	r33_k1 0.902900
	r34_synthSOCS3 1958.000000
	r35_k1 1958.000000
	r36_v 0.239500
	r37_kmSTAT1 0.976100
	r37_synthSTAT1mRNA 4.375000
	r38_k1 0.236700
	r39_v 0.206900
	r40_synthSTAT2mRNA 1.561000
	r41_k1 0.244600
	r42_v 0.360500
	r43_kmIRF9 0.121000
	r43_synthIRF9mRNA 18.620000
	r44_k1 0.418900
	r45_v 0.983300
	r46_synthIRF2mRNA 0.677500
	r47_k1 1.062000
	r48_v 0.064420
	r49_synthUSP18mRNA 2.784000
	r50_k1 0.091030
	r51_v 1.301000
	r52_synthSOCS1mRNA 8.848000
	r53_hlSOCS1mRNA 0.564400
	r54_v 1.257000
	r55_synthSOCS3mRNA 0.012050
	r56_k1 1.163000
	r57_k1 0.552000
	r58_kmsynthSTAT1 5.373000
	r58_synthSTAT1 1533000.000000
	r59_k1 0.527500
	r60_k1 0.527500
	r61_k1 0.527500
	r62_synthSTAT2 5274.000000
	r63_k1 1.770000
	r64_k1 1.770000
	r65_k1 1.770000
	r66_k1 1.770000
	r67_k1 1.770000
	r68_synthIRF9 329.900000
	r69_k1 1.137000
	r70_k1 1.137000
	r71_synthUSP18 1658.000000
	r72_k1 0.672200
	r73_k1 0.672200
	r74_synthSOCS1 0.902900
	r75_k1 0.902900
end parameters
begin molecule types
	STAT1(_l_3~_L_3~0,c~C~0,mrna~MRNA~0,n~N~0,stat1,stat2)
	#^ bqbiol:is uniprot:P01562
	IFNa(rec)
	#^ bqbiol:hasProperty obi:OBI:0000794, omit:OMIT:0020133
	OccGAS_ISREbs()
	#^ bqbiol:is uniprot:Q9UMW8
	USP18(_lc_2~_LC_2~0,mrna~MRNA~0)
	#^ bqbiol:hasPart uniprot:Q00978, uniprot:P52630, uniprot:P42224
	#^ bqbiol:hasProperty ncit:C13226
	ISGF3c()
	#^ bqbiol:hasProperty obi:OBI:0000794
	OccGASbs()
	STAT1_LC(_1~_1~0,_2~_2~0)
	IRF9_LC(_1~_1~0,_2~_2~0)
	#^ bmbiol:isInstanceOf uniprot:Q9UMW8, ncit:C80450
	#^ bqbiol:isVersionOf uniprot:Q9UMW8
	USP18_LC_1()
	#^ bqbiol:is uniprot:O14543
	SOCS3(mrna~MRNA~0)
	IRF9(c~C~0,mrna~MRNA~0,n~N~0)
	STAT2(_l_5~_L_5~0,c~C~0,mrna~MRNA~0,n~N~0,stat1)
	#^ bqbiol:hasPart uniprot:Q00978, uniprot:P42224, uniprot:P52630
	#^ bqbiol:hasProperty ncit:C13361
	ISGF3n()
	#^ bqbiol:is uniprot:P17181
	Rec(ifna)
	#^ bqbiol:is uniprot:O15524
	SOCS1(_lc_1~_LC_1~0,mrna~MRNA~0)
	STAT2_LC(_1~_1~0,_2~_2~0,_3~_3~0,_4~_4~0)
	#^ bqbiol:is uniprot:P14316
	IRF2(mrna~MRNA~0)
end molecule types
begin seed species
	Rec(ifna) 1.1977758e+18 # (1989.0 * 1e-09)mol/L * 6.022e23/mol *1.0L #Rec #Rec
	SOCS1(_lc_1~0,mrna~0) 498982920000000.0 #original 0.8286substance/volume #SOCS1 #SOCS1
	IFNa(rec) 3.0110000000000004e+19 #original 50000.0substance/volume #IFNa #IFN
	USP18(_lc_2~0,mrna~0) 1.0514412000000001e+18 #original 1746.0substance/volume #USP18 #USP18
	STAT1(_l_3~0,c~C,mrna~0,n~0,stat1,stat2) 2.9284986000000005e+20 #original 486300.0substance/volume #STAT1c #STAT1c
	STAT2(_l_5~0,c~C,mrna~0,n~0,stat1) 1.8300858000000002e+19 #original 30390.0substance/volume #STAT2c #STAT2c
	STAT1(_l_3~0,c~0,mrna~0,n~N,stat1,stat2) 2.9284986e+19 #original 48630.0substance/volume #STAT1n #STAT1n
	STAT2(_l_5~0,c~0,mrna~0,n~N,stat1) 1.8300858e+18 #original 3039.0substance/volume #STAT2n #STAT2n
	IRF9(c~0,mrna~0,n~N) 8.430800000000002e+16 #original 140.0substance/volume #IRF9n #IRF9n
	IRF9(c~C,mrna~0,n~0) 8.430800000000001e+17 #original 1400.0substance/volume #IRF9c #IRF9c
	SOCS3(mrna~0) 650978200000000.1 #original 1.081substance/volume #SOCS3 #SOCS3
	STAT1(_l_3~0,c~0,mrna~MRNA,n~0,stat1,stat2) 609426400000000.0 #original 1.012substance/volume #STAT1mRNA #STAT1mRNA
	STAT2(_l_5~0,c~0,mrna~MRNA,n~0,stat1) 509340760000000.06 #original 0.8458substance/volume #STAT2mRNA #STAT2mRNA
	IRF9(c~0,mrna~MRNA,n~0) 518253320000000.06 #original 0.8606substance/volume #IRF9mRNA #IRF9mRNA
	IRF2(mrna~MRNA) 557516760000000.06 #original 0.9258substance/volume #IRF2mRNA #IRF2mRNA
	IRF2(mrna~0) 1072518200000000.0 #original 1.781substance/volume #IRF2 #IRF2
	USP18(_lc_2~0,mrna~MRNA) 426176940000000.06 #original 0.7077substance/volume #USP18mRNA #USP18mRNA
	SOCS1(_lc_1~0,mrna~MRNA) 498982920000000.0 #original 0.8286substance/volume #SOCS1mRNA #SOCS1mRNA
	SOCS3(mrna~MRNA) 650978200000000.1 #original 1.081substance/volume #SOCS3mRNA #SOCS3mRNA
	STAT1_LC(_1~_1,_2~0) 2.7737332000000003e+20 #original 460600.0substance/volume #STAT1_LC_1 #STAT1_LC_1
	STAT1_LC(_1~0,_2~_2) 2.7737332000000003e+20 #original 460600.0substance/volume #STAT1_LC_2 #STAT1_LC_2
	STAT1(_l_3~_L_3,c~C,mrna~0,n~0,stat1,stat2) 2.7737332000000003e+20 #original 460600.0substance/volume #STAT1_LC_3 #STAT1_LC_3
	STAT2_LC(_1~_1,_2~0,_3~0,_4~0) 1.517544e+18 #original 2520.0substance/volume #STAT2_LC_1 #STAT2_LC_1
	STAT2_LC(_1~0,_2~_2,_3~0,_4~0) 1.517544e+18 #original 2520.0substance/volume #STAT2_LC_2 #STAT2_LC_2
	STAT2_LC(_1~0,_2~0,_3~_3,_4~0) 1.517544e+18 #original 2520.0substance/volume #STAT2_LC_3 #STAT2_LC_3
	STAT2_LC(_1~0,_2~0,_3~0,_4~_4) 1.517544e+18 #original 2520.0substance/volume #STAT2_LC_4 #STAT2_LC_4
	STAT2(_l_5~_L_5,c~C,mrna~0,n~0,stat1) 1.517544e+18 #original 2520.0substance/volume #STAT2_LC_5 #STAT2_LC_5
	IRF9_LC(_1~_1,_2~0) 1.5036934000000003e+17 #original 249.7substance/volume #IRF9_LC_1 #IRF9_LC_1
	IRF9_LC(_1~0,_2~_2) 1.5036934000000003e+17 #original 249.7substance/volume #IRF9_LC_2 #IRF9_LC_2
	USP18_LC_1() 1.050839e+18 #original 1745.0substance/volume #USP18_LC_1 #USP18_LC_1
	USP18(_lc_2~_LC_2,mrna~0) 1.050839e+18 #original 1745.0substance/volume #USP18_LC_2 #USP18_LC_2
	SOCS1(_lc_1~_LC_1,mrna~0) 498982920000000.0 #original 0.8286substance/volume #SOCS1_LC_1 #SOCS1_LC_1
end seed species
begin observables
	Species Rec Rec(ifna) #Rec
	Species SOCS1 SOCS1(_lc_1~0,mrna~0) #SOCS1
	Species IFNa IFNa(rec) #IFNa
	Species aRecIFNa Rec(ifna!913).IFNa(rec!913) #aRecIFNa
	Species USP18 USP18(_lc_2~0,mrna~0) #USP18
	Species STAT1c STAT1(_l_3~0,c~C,mrna~0,n~0,stat1,stat2) #STAT1c
	Species STAT2c STAT2(_l_5~0,c~C,mrna~0,n~0,stat1) #STAT2c
	Species pSTAT1pSTAT2c STAT1(_l_3~0,c~C,mrna~0,n~0,stat1,stat2!914).STAT2(_l_5~0,c~C,mrna~0,n~0,stat1!914) #pSTAT1pSTAT2c
	Species pSTAT1pSTAT2n STAT1(_l_3~0,c~0,mrna~0,n~N,stat1,stat2!914).STAT2(_l_5~0,c~0,mrna~0,n~N,stat1!914) #pSTAT1pSTAT2n
	Species STAT1n STAT1(_l_3~0,c~0,mrna~0,n~N,stat1,stat2) #STAT1n
	Species STAT2n STAT2(_l_5~0,c~0,mrna~0,n~N,stat1) #STAT2n
	Species ISGF3c ISGF3c() #ISGF3c
	Species ISGF3n ISGF3n() #ISGF3n
	Species IRF9n IRF9(c~0,mrna~0,n~N) #IRF9n
	Species pSTAT1dimc STAT1(_l_3~0,c~C,mrna~0,n~0,stat1!95,stat2).STAT1(_l_3~0,c~C,mrna~0,n~0,stat1!95,stat2) #pSTAT1dimc
	Species pSTAT1dimn STAT1(_l_3~0,c~0,mrna~0,n~N,stat1!95,stat2).STAT1(_l_3~0,c~0,mrna~0,n~N,stat1!95,stat2) #pSTAT1dimn
	Species OccGAS_ISREbs OccGAS_ISREbs() #OccGAS_ISREbs
	Species OccGASbs OccGASbs() #OccGASbs
	Species IRF9c IRF9(c~C,mrna~0,n~0) #IRF9c
	Species SOCS3 SOCS3(mrna~0) #SOCS3
	Species STAT1mRNA STAT1(_l_3~0,c~0,mrna~MRNA,n~0,stat1,stat2) #STAT1mRNA
	Species STAT2mRNA STAT2(_l_5~0,c~0,mrna~MRNA,n~0,stat1) #STAT2mRNA
	Species IRF9mRNA IRF9(c~0,mrna~MRNA,n~0) #IRF9mRNA
	Species IRF2mRNA IRF2(mrna~MRNA) #IRF2mRNA
	Species IRF2 IRF2(mrna~0) #IRF2
	Species USP18mRNA USP18(_lc_2~0,mrna~MRNA) #USP18mRNA
	Species SOCS1mRNA SOCS1(_lc_1~0,mrna~MRNA) #SOCS1mRNA
	Species SOCS3mRNA SOCS3(mrna~MRNA) #SOCS3mRNA
	Species STAT1_LC_1 STAT1_LC(_1~_1,_2~0) #STAT1_LC_1
	Species STAT1_LC_2 STAT1_LC(_1~0,_2~_2) #STAT1_LC_2
	Species STAT1_LC_3 STAT1(_l_3~_L_3,c~C,mrna~0,n~0,stat1,stat2) #STAT1_LC_3
	Species STAT2_LC_1 STAT2_LC(_1~_1,_2~0,_3~0,_4~0) #STAT2_LC_1
	Species STAT2_LC_2 STAT2_LC(_1~0,_2~_2,_3~0,_4~0) #STAT2_LC_2
	Species STAT2_LC_3 STAT2_LC(_1~0,_2~0,_3~_3,_4~0) #STAT2_LC_3
	Species STAT2_LC_4 STAT2_LC(_1~0,_2~0,_3~0,_4~_4) #STAT2_LC_4
	Species STAT2_LC_5 STAT2(_l_5~_L_5,c~C,mrna~0,n~0,stat1) #STAT2_LC_5
	Species IRF9_LC_1 IRF9_LC(_1~_1,_2~0) #IRF9_LC_1
	Species IRF9_LC_2 IRF9_LC(_1~0,_2~_2) #IRF9_LC_2
	Species USP18_LC_1 USP18_LC_1() #USP18_LC_1
	Species USP18_LC_2 USP18(_lc_2~_LC_2,mrna~0) #USP18_LC_2
	Species SOCS1_LC_1 SOCS1(_lc_1~_LC_1,mrna~0) #SOCS1_LC_1
end observables
begin functions
	SOCS3mRNA_log10() = log10(SOCS3mRNA)
	SOCS1mRNA_log10() = log10(SOCS1mRNA)
	USP18mRNA_log10() = log10(USP18mRNA)
	STAT2mRNA_log10() = log10(STAT2mRNA)
	STAT1mRNA_log10() = log10(STAT1mRNA)
	IRF9_mRNA_log10() = log10(IRF9mRNA)
	IRF2_mRNA_log10() = log10(IRF2mRNA)
	fRate2() = 0.01028*SOCS1
	fRate3() = 0.0593/(SOCS3*(0.12131416*SOCS1*USP18 + 889.4*SOCS1 + 0.0001364*USP18 + 1))
	fRate5() = 0.8837*SOCS1
	fRate6() = 0.01644*USP18
	fRate7() = 27.82*SOCS1*USP18
	fRate9() = 0.001112*aRecIFNa
	fRate15() = 7.12e-6*aRecIFNa
	fRate18() = 0.0003583*ISGF3n
	fRate19() = 0.0002972*pSTAT1pSTAT2n
	fRate21() = 1395.0*pSTAT1dimn
	fRate33() = 1958.0*SOCS3mRNA
	fRate36() = 4.375*OccGAS_ISREbs/(OccGAS_ISREbs + 0.9761)
	fRate39() = 1.561*OccGAS_ISREbs
	fRate42() = 18.62*OccGAS_ISREbs/(OccGAS_ISREbs + 0.121)
	fRate45() = 0.6775*OccGAS_ISREbs
	fRate48() = 2.784*OccGAS_ISREbs
	fRate51() = 8.848*OccGAS_ISREbs
	fRate52() = 0.5644*SOCS1mRNA*(IRF2 + 1)
	fRate54() = 0.01205*OccGASbs
	fRate57() = 1533000.0*STAT1mRNA/(STAT1mRNA + 5.373)
	fRate61() = 5274.0*STAT2mRNA
	fRate67() = 329.9*IRF9mRNA
	fRate70() = 1658.0*USP18mRNA
	fRate73() = 0.9029*SOCS1mRNA
end functions
begin reaction rules
	Receptor_production: 0  -> Rec(ifna) r1_v
	Receptor_degradation_basal: Rec(ifna) -> 0  r2_k1
	Receptor_degradation_by_SOCS1: Rec(ifna) -> 0  fRate2() #Modifiers(SOCS1)
	Active_receptor_complex_formation: IFNa(rec) + Rec(ifna) -> Rec(ifna!913).IFNa(rec!913) fRate3() #Modifiers(SOCS1, USP18, SOCS3)
	Active_receptor_complex_degradation_basal: Rec(ifna!913).IFNa(rec!913) -> 0  r5_k1
	Active_receptor_complex_degradation_by_SOCS1: Rec(ifna!913).IFNa(rec!913) -> 0  fRate5() #Modifiers(SOCS1)
	Active_receptor_complex_degradation_by_USP18: Rec(ifna!913).IFNa(rec!913) -> 0  fRate6() #Modifiers(USP18)
	Active_receptor_complex_degradation_by_USP18_and_SOCS1__synergy: Rec(ifna!913).IFNa(rec!913) -> 0  fRate7() #Modifiers(SOCS1, USP18)
	USP18_degradation: USP18(_lc_2~0,mrna~0) -> 0  r9_k1
	Heterodimer_complex_formation: STAT1(_l_3~0,c~C,mrna~0,n~0,stat1,stat2) + STAT2(_l_5~0,c~C,mrna~0,n~0,stat1) -> STAT1(_l_3~0,c~C,mrna~0,n~0,stat1,stat2!914).STAT2(_l_5~0,c~C,mrna~0,n~0,stat1!914) fRate9() #Modifiers(aRecIFN)
	Heterodimer_translocation_to_nucleus: STAT1(_l_3~0,c~C,mrna~0,n~0,stat1,stat2!914).STAT2(_l_5~0,c~C,mrna~0,n~0,stat1!914) -> STAT1(_l_3~0,c~0,mrna~0,n~N,stat1,stat2!914).STAT2(_l_5~0,c~0,mrna~0,n~N,stat1!914) r11_k1
	Heterodimer_decay: STAT1(_l_3~0,c~0,mrna~0,n~N,stat1,stat2!914).STAT2(_l_5~0,c~0,mrna~0,n~N,stat1!914) -> STAT1(_l_3~0,c~0,mrna~0,n~N,stat1,stat2) + STAT2(_l_5~0,c~0,mrna~0,n~N,stat1) r12_k1
	ISGF3_complex_formation: STAT1(_l_3~0,c~C,mrna~0,n~0,stat1,stat2!914).STAT2(_l_5~0,c~C,mrna~0,n~0,stat1!914) + IRF9(c~C,mrna~0,n~0) -> ISGF3c() r13_k1
	ISGF3_translocation_to_nucleus: ISGF3c() -> ISGF3n() r14_k1
	ISGF3_decay: ISGF3n() -> STAT1(_l_3~0,c~0,mrna~0,n~N,stat1,stat2) + STAT2(_l_5~0,c~0,mrna~0,n~N,stat1) + IRF9(c~0,mrna~0,n~N) r15_k1
	Homodimer_complex_formation: STAT1(_l_3~0,c~C,mrna~0,n~0,stat1,stat2) + STAT1(_l_3~0,c~C,mrna~0,n~0,stat1,stat2) -> STAT1(_l_3~0,c~C,mrna~0,n~0,stat1!95,stat2).STAT1(_l_3~0,c~C,mrna~0,n~0,stat1!95,stat2) fRate15() #Modifiers(aRecIFN)
	Homodimer_translocation_to_nucleus: STAT1(_l_3~0,c~C,mrna~0,n~0,stat1!95,stat2).STAT1(_l_3~0,c~C,mrna~0,n~0,stat1!95,stat2) -> STAT1(_l_3~0,c~0,mrna~0,n~N,stat1!95,stat2).STAT1(_l_3~0,c~0,mrna~0,n~N,stat1!95,stat2) r17_k1
	Homodimer_decay: STAT1(_l_3~0,c~0,mrna~0,n~N,stat1!95,stat2).STAT1(_l_3~0,c~0,mrna~0,n~N,stat1!95,stat2) -> STAT1(_l_3~0,c~0,mrna~0,n~N,stat1,stat2) + STAT1(_l_3~0,c~0,mrna~0,n~N,stat1,stat2) r18_k1
	OccGAS_ISREbs_formation_by_ISGF3: 0  -> OccGAS_ISREbs() fRate18() #Modifiers(ISGF3n)
	OccGAS_ISREbs_formation_by_heterodimer: 0  -> OccGAS_ISREbs() fRate19() #Modifiers(pSTAT1pSTAT2n)
	OccGAS_ISREbs_decay: OccGAS_ISREbs() -> 0  r21_k1
	Occupy_GAS_binding_site: 0  -> OccGASbs() fRate21() #Modifiers(pSTAT1dimn)
	OccGASbs_0: OccGASbs() -> 0  r23_k1
	STAT1_degradation: STAT1(_l_3~0,c~C,mrna~0,n~0,stat1,stat2) -> 0  r24_k1
	STAT1_translocation_to_cytoplasm: STAT1(_l_3~0,c~0,mrna~0,n~N,stat1,stat2) -> STAT1(_l_3~0,c~C,mrna~0,n~0,stat1,stat2) r25_k1
	STAT1_translocation_to_nucleus: STAT1(_l_3~0,c~C,mrna~0,n~0,stat1,stat2) -> STAT1(_l_3~0,c~0,mrna~0,n~N,stat1,stat2) r26_k1
	STAT2_degradation: STAT2(_l_5~0,c~C,mrna~0,n~0,stat1) -> 0  r27_k1
	STAT2_translocation_to_cytoplasm: STAT2(_l_5~0,c~0,mrna~0,n~N,stat1) -> STAT2(_l_5~0,c~C,mrna~0,n~0,stat1) r28_k1
	STAT2_translocation_to_nucleus: STAT2(_l_5~0,c~C,mrna~0,n~0,stat1) -> STAT2(_l_5~0,c~0,mrna~0,n~N,stat1) r29_k1
	IRF9_translocation_to_cytoplasm: IRF9(c~0,mrna~0,n~N) -> IRF9(c~C,mrna~0,n~0) r30_k1
	IRF9_translocation_to_nucleus: IRF9(c~C,mrna~0,n~0) -> IRF9(c~0,mrna~0,n~N) r31_k1
	IRF9_degradation: IRF9(c~C,mrna~0,n~0) -> 0  r32_k1
	SOCS1_degradation: SOCS1(_lc_1~0,mrna~0) -> 0  r33_k1
	SOCS3_synthesis: 0  -> SOCS3(mrna~0) fRate33() #Modifiers(SOCS3mRNA)
	SOCS3_degradation: SOCS3(mrna~0) -> 0  r35_k1
	STAT1_mRNA_basal_production: 0  -> STAT1(_l_3~0,c~0,mrna~MRNA,n~0,stat1,stat2) r36_v
	STAT1mRNA_production_by_ISRE: 0  -> STAT1(_l_3~0,c~0,mrna~MRNA,n~0,stat1,stat2) fRate36() #Modifiers(OccGAS_ISREbs)
	STAT1mRNA_decay: STAT1(_l_3~0,c~0,mrna~MRNA,n~0,stat1,stat2) -> 0  r38_k1
	STAT2mRNA_basal_production: 0  -> STAT2(_l_5~0,c~0,mrna~MRNA,n~0,stat1) r39_v
	STAT2mRNA_production_by_ISRE: 0  -> STAT2(_l_5~0,c~0,mrna~MRNA,n~0,stat1) fRate39() #Modifiers(OccGAS_ISREbs)
	STAT2mRNA_decay: STAT2(_l_5~0,c~0,mrna~MRNA,n~0,stat1) -> 0  r41_k1
	IRF9mRNA_basal_production: 0  -> IRF9(c~0,mrna~MRNA,n~0) r42_v
	IRF9mRNA_production_by_ISRE: 0  -> IRF9(c~0,mrna~MRNA,n~0) fRate42() #Modifiers(OccGAS_ISREbs)
	IRF9mRNA_decay: IRF9(c~0,mrna~MRNA,n~0) -> 0  r44_k1
	IRF2mRNA_basal_production: 0  -> IRF2(mrna~MRNA) r45_v
	IRF2mRNA_production_by_ISRE: 0  -> IRF2(mrna~MRNA) fRate45() #Modifiers(OccGAS_ISREbs)
	IRF2_translation_and_mRNA_decay: IRF2(mrna~MRNA) -> IRF2(mrna~0) r47_k1
	USP18mRNA_basal_production: 0  -> USP18(_lc_2~0,mrna~MRNA) r48_v
	USP18mRNA_production_by_ISRE: 0  -> USP18(_lc_2~0,mrna~MRNA) fRate48() #Modifiers(OccGAS_ISREbs)
	USP18mRNA_decay: USP18(_lc_2~0,mrna~MRNA) -> 0  r50_k1
	SOCS1mRNA_basal_production: 0  -> SOCS1(_lc_1~0,mrna~MRNA) r51_v
	SOCS1mRNA_production_by_ISRE: 0  -> SOCS1(_lc_1~0,mrna~MRNA) fRate51() #Modifiers(OccGAS_ISREbs)
	SOCS1mRNA_decay_reactants_0: 0  -> SOCS1(_lc_1~0,mrna~MRNA) -1*(fRate52()) #Modifiers(IRF2)
	SOCS3mRNA_basal_production: 0  -> SOCS3(mrna~MRNA) r54_v
	SOCS3mRNA_production_by_ISRE: 0  -> SOCS3(mrna~MRNA) fRate54() #Modifiers(OccGASbs)
	SOCS3mRNA_decay: SOCS3(mrna~MRNA) -> 0  r56_k1
	IRF2_degradation: IRF2(mrna~0) -> 0  r57_k1
	Linear_chain_for_time_delay_in_STAT1_translation: 0  -> STAT1_LC(_1~_1,_2~0) fRate57() #Modifiers(STAT1mRNA)
	STAT1_chain_step_1: STAT1_LC(_1~_1,_2~0) -> STAT1_LC(_1~0,_2~_2) r59_k1
	STAT1_chain_step_2: STAT1_LC(_1~0,_2~_2) -> STAT1(_l_3~_L_3,c~C,mrna~0,n~0,stat1,stat2) r60_k1
	STAT1_chain_step3: STAT1(_l_3~_L_3,c~C,mrna~0,n~0,stat1,stat2) -> STAT1(_l_3~0,c~C,mrna~0,n~0,stat1,stat2) r61_k1
	Linear_chain_for_time_delay_in_STAT2_translation: 0  -> STAT2_LC(_1~_1,_2~0,_3~0,_4~0) fRate61() #Modifiers(STAT2mRNA)
	STAT2_chain_step_1: STAT2_LC(_1~_1,_2~0,_3~0,_4~0) -> STAT2_LC(_1~0,_2~_2,_3~0,_4~0) r63_k1
	STAT2_chain_step_2: STAT2_LC(_1~0,_2~_2,_3~0,_4~0) -> STAT2_LC(_1~0,_2~0,_3~_3,_4~0) r64_k1
	STAT2_chain_step_3: STAT2_LC(_1~0,_2~0,_3~_3,_4~0) -> STAT2_LC(_1~0,_2~0,_3~0,_4~_4) r65_k1
	STAT2_chain_step_4: STAT2_LC(_1~0,_2~0,_3~0,_4~_4) -> STAT2(_l_5~_L_5,c~C,mrna~0,n~0,stat1) r66_k1
	STAT2_chain_step_5: STAT2(_l_5~_L_5,c~C,mrna~0,n~0,stat1) -> STAT2(_l_5~0,c~C,mrna~0,n~0,stat1) r67_k1
	Linear_chain_for_time_delay_in_IRF9_translation: 0  -> IRF9_LC(_1~_1,_2~0) fRate67() #Modifiers(IRF9mRNA)
	IRF9_chain_step_1: IRF9_LC(_1~_1,_2~0) -> IRF9_LC(_1~0,_2~_2) r69_k1
	IRF9_chain_step_2: IRF9_LC(_1~0,_2~_2) -> IRF9(c~C,mrna~0,n~0) r70_k1
	Linear_chain_for_time_delay_in_USP18_translation: 0  -> USP18_LC_1() fRate70() #Modifiers(USP18mRNA)
	USP18_chain_step_1: USP18_LC_1() -> USP18(_lc_2~_LC_2,mrna~0) r72_k1
	USP18_chain_step_2: USP18(_lc_2~_LC_2,mrna~0) -> USP18(_lc_2~0,mrna~0) r73_k1
	Linear_chain_for_time_delay_in_SOCS1_translation: 0  -> SOCS1(_lc_1~_LC_1,mrna~0) fRate73() #Modifiers(SOCS1mRNA)
	SOCS1_chain_step_1: SOCS1(_lc_1~_LC_1,mrna~0) -> SOCS1(_lc_1~0,mrna~0) r75_k1
end reaction rules
end model
