###
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/28487363']
#@BQB_IS:['http://identifiers.org/biomodels.db/MODEL1912160001']
#@BQB_OCCURS_IN:['http://identifiers.org/cl/CL:0000746']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000003', 'http://identifiers.org/efo/0002687', 'http://identifiers.org/go/GO:0006096', 'http://identifiers.org/efo/0003777', 'http://identifiers.org/efo/1001375', 'http://identifiers.org/go/GO:0046034', 'http://identifiers.org/go/GO:0071456']
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000961', 'http://identifiers.org/biomodels.db/MODEL1912160001']
#@notes:'This is an atomized translation of an SBML model created on 14/08/2021. The original model has 49 molecules and 40 reactions. The translated model has 43 molecules and 101 rules'
###
begin model
begin parameters
	pH_o 7.4 #units:unit_3
	HCO3_o 23.0 #units:unit_4
	switch_kashi 1.0 #units:unit_3
	h 1.5 #units:unit_4
	Km_AMP_2 0.016 #units:unit_4
	switch_GSGP 1.0 #units:unit_3
	switch_LDH 1.0 #units:unit_3
	level 1.0 #units:unit_3
	lowO2 0.0175
	K_AK 1.0
	X_AK 10000.0
	VR_cellcyto 1.4703
	X_atpase 0.39
	K_CK 1660000.0
	X_CK 10000.0
	Kmf_eno 0.045
	Kmr_eno 0.089
	Vf_eno 1.85
	Vr_eno 2.0
	Kmf_fbp 0.038
	Vf_fbp 0.991667
	Km_NAD 0.058
	Kmf_gapdh 0.042
	Vf_gapdh 5.35
	Kmf_gp 0.1
	Kmr_gp 5.0
	Vf_gp 0.781667
	Vr_gp 55.8333
	Kmf_gs_I_form 0.08
	Vf_gs_I_form 0.146833
	Kmf_gs_D_form 1.42
	Vf_gs_D_form 0.146833
	Km_ATP_hk 0.236
	Kmf_hk 0.072
	Kmr_hk 0.042
	Vf_hk 0.55
	Vr_hk 0.000106
	Km_NADH 0.001
	Kmf_ldh 0.125
	Vf_ldh 23.9333
	Km_Lac_flux_in 2.2
	Vmax_Lac_flux_in 0.04817
	Km_Lac_flux_out 6.92
	Vmax_Lac_flux_out 0.1817
	Km_ADP 0.00107
	Km_O2 0.00297
	Km_ATP_pfk 0.127
	Kmf_pfk 0.224
	Vf_pfk 1.32833
	Kmf_pgm 0.045
	Kmr_pgm 0.67
	Vf_pgm 1.93333
	Vr_pgm 1.12
	Kmf_pgi 0.425
	Kmr_pgi 0.175
	Vf_pgi 10.0667
	Vr_pgi 9.6
	Km_ADP_pgk 0.008
	Km_ATP_pgk 0.565
	Kmf_pgk 0.021
	Kmr_pgk 0.51
	Vf_pgk 251.0
	Vr_pgk 15.9833
	Kmf_pglym 0.145
	Kmr_pglym 0.139
	Vf_pglym 11.2333
	Vr_pglym 48.0
	Km_ADP_pk 0.00268
	Kmf_pk 0.11
	Kmr_pk 10.0
	Vf_pk 9.43333
	Vr_pk 0.00105
	K_Lac 0.12589
	X_Lac 10000.0
	K_up 4.36
	X_up 10000.0
	f_up_eq 8808.0
	Kia_NADH 0.00107
	Km_DHAP 0.3
	Km_NADH_re54 0.00284
	Km_G1P 0.008
	Km_GBP 0.565
	Kmf_GBPS 0.021
	Kmr_GBPS 0.51
	Vf_GBPS 10.0
	Vr_GBPS 6.0
	PS_ec 10.0
	PS_ve 50.0
	k_a 15400.0
	k_d 60.0
	Kmf_tpi 1.53
	Vf_tpi 5.93333
	v_PGI_ss 0.22
	pH_sub_i_endsub__c1 4.27562e+21 #original 7.1substance/volume
	pH_sub_i_endsub_ 4.27562e+21 #original 7.1substance/volume
	r9_k1 0.100000
	r33_vf 20.000000
end parameters
begin compartments
	#volume units: volume
	c1 3 1.0 #cell
	c2 3 0.240633296 #extracellular
	c3 3 0.06842 #vessel
	default 3 1.0
end compartments
begin molecule types
	#^ bqbiol:is chebi:CHEBI:13389
	NAD()
	#^ bqbiol:is chebi:CHEBI:17659
	UDP(glycogen)
	#^ bqbiol:isVersionOf chebi:CHEBI:28358
	LacticAcid()
	#^ bqbiol:is chebi:CHEBI:16761
	ADP()
	#^ bqbiol:is chebi:CHEBI:18021
	PEP()
	#^ bqbiol:is chebi:CHEBI:88003
	F6P()
	#^ bqbiol:is chebi:CHEBI:17544
	HCO_sub_3_endsub__super__minus__endsuper__sub_o_endsub_()
	#^ bqbiol:is chebi:CHEBI:33263
	O_sub_2_endsub(_e~_E~0,mb)
	#^ bqbiol:is chebi:CHEBI:88350
	s2PG()
	#^ bqbiol:is chebi:CHEBI:17138
	GAP(dhap)
	#^ bqbiol:is chebi:CHEBI:15978
	Glycerol_3_P()
	#^ bqbiol:is chebi:CHEBI:24996
	L_super__minus__endsuper__sub_o_endsub_(L_super__minus__endsuper__sub_i_endsub_~L_super__minus__endsuper__sub_i_endsub_~0)
	#^ bqbiol:is chebi:CHEBI:28087
	Glycogen(udp)
	#^ bqbiol:is chebi:CHEBI:15422
	ATP()
	#^ bqbiol:is chebi:CHEBI:16108
	DHAP(gap)
	#^ bqbiol:is chebi:CHEBI:15378
	H_super__plus__endsuper__sub_i_endsub_()
	#^ bqbiol:is chebi:CHEBI:17234
	Glucose()
	#^ bqbiol:is chebi:CHEBI:17544
	HCO_sub_3_endsub__super__minus__endsuper__sub_i_endsub_()
	#^ bqbiol:is chebi:CHEBI:4170
	G6P()
	#^ bqbiol:is chebi:CHEBI:16234
	OH_super__minus__endsuper__sub_i_endsub_()
	#^ bqbiol:is chebi:CHEBI:16938
	s6PGN()
	#^ bqbiol:is chebi:CHEBI:17680
	G16BP()
	#^ bqbiol:is chebi:CHEBI:29101
	Na_super__plus__endsuper__sub_o_endsub_()
	#^ bqbiol:is chebi:CHEBI:15378
	H_super__plus__endsuper__sub_o_endsub_()
	#^ bqbiol:is chebi:CHEBI:29101
	Na_super__plus__endsuper__sub_i_endsub_()
	#^ bqbiol:is chebi:CHEBI:17996
	Cl_super__minus__endsuper__sub_o_endsub_()
	#^ bqbiol:is chebi:CHEBI:16027
	AMP()
	#^ bqbiol:is chebi:CHEBI:16077
	G1P()
	#^ bqbiol:is chebi:CHEBI:58092
	CrP()
	#^ bqbiol:isVersionOf chebi:CHEBI:89363
	s13BPG()
	#^ bqbiol:is chebi:CHEBI:15713
	UTP()
	#^ bqbiol:is chebi:CHEBI:24838
	P_sub_i_endsub_()
	#^ bqbiol:is chebi:CHEBI:16919
	Cr()
	#^ bqbiol:is chebi:CHEBI:7044
	Mb(o_sub_2_endsub)
	#^ bqbiol:is chebi:CHEBI:15361
	PYR()
	#^ bqbiol:is chebi:CHEBI:16234
	OH_super__minus__endsuper__sub_o_endsub_()
	#^ bqbiol:is chebi:CHEBI:15377
	H_sub_2_endsub_O()
	s78()
	#^ bqbiol:is chebi:CHEBI:16526
	CO_sub_2_endsub_()
	#^ bqbiol:is chebi:CHEBI:57998
	s3PG()
	#^ bqbiol:is chebi:CHEBI:33263
	O_sub_2_v_endsub()
	#^ bqbiol:is chebi:CHEBI:16908
	NADH()
	#^ bqbiol:is chebi:CHEBI:17996
	Cl_super__minus__endsuper__sub_i_endsub_()
end molecule types
begin seed species
	@c1:H_super__plus__endsuper__sub_i_endsub_() 4.781468000000001e+16 # (7.94e-05 * 0.001)mol/L * 6.022e23/mol *1.0L #H_super__plus__endsuper__sub_i_endsub_ #s1
	@default:H_super__plus__endsuper__sub_o_endsub_() 602200000.0000001 #original 1e-12substance/volume #H_super__plus__endsuper__sub_o_endsub_ #s2
	@c1:OH_super__minus__endsuper__sub_i_endsub_() 602200000.0000001 #original 1e-12substance/volume #OH_super__minus__endsuper__sub_i_endsub_ #s7
	@default:OH_super__minus__endsuper__sub_o_endsub_() 602200000.0000001 #original 1e-12substance/volume #OH_super__minus__endsuper__sub_o_endsub_ #s8
	@c1:Na_super__plus__endsuper__sub_i_endsub_() 3.011e+21 #original 5.0substance/volume #Na_super__plus__endsuper__sub_i_endsub_ #s24
	@default:Na_super__plus__endsuper__sub_o_endsub_() 602200000.0000001 #original 1e-12substance/volume #Na_super__plus__endsuper__sub_o_endsub_ #s25
	@c1:HCO_sub_3_endsub__super__minus__endsuper__sub_i_endsub_() 1.5055000000000002e+22 #original 25.0substance/volume #HCO_sub_3_endsub__super__minus__endsuper__sub_i_endsub_ #s26
	@default:HCO_sub_3_endsub__super__minus__endsuper__sub_o_endsub_() 602200000.0000001 #original 1e-12substance/volume #HCO_sub_3_endsub__super__minus__endsuper__sub_o_endsub_ #s27
	@c1:Cl_super__minus__endsuper__sub_i_endsub_() 602200000.0000001 #original 1e-12substance/volume #Cl_super__minus__endsuper__sub_i_endsub_ #s28
	@default:Cl_super__minus__endsuper__sub_o_endsub_() 602200000.0000001 #original 1e-12substance/volume #Cl_super__minus__endsuper__sub_o_endsub_ #s29
	@c1:ATP() 4.2154000000000003e+21 #original 7.0substance/volume #ATP #s30
	@c1:ADP() 602200000.0000001 #original 1e-12substance/volume #ADP #s31
	@c1:P_sub_i_endsub_() 4.2154000000000003e+21 #original 7.0substance/volume #P_sub_i_endsub_ #s32
	@c1:CrP() 1.5055000000000002e+22 #original 25.0substance/volume #CrP #s33
	@c1:Cr() 602200000.0000001 #original 1e-12substance/volume #Cr #s34
	@c1:AMP() 6022000000000000.0 #original 1e-05substance/volume #AMP #s35
	@c1:Glycogen(udp) 1.288708e+22 #original 21.4substance/volume #Glycogen #s36
	@c1:L_super__minus__endsuper__sub_o_endsub_(L_super__minus__endsuper__sub_i_endsub_~L_super__minus__endsuper__sub_i_endsub_) 4.1130260000000003e+20 #original 0.683substance/volume #L_super__minus__endsuper__sub_i_endsub_ #s38
	@c1:LacticAcid() 9.384684800000001e+22 #original 155.84substance/volume #LacticAcid #s52
	@c1:G6P() 1.0177180000000002e+20 #original 0.169substance/volume #G6P #s57
	@c1:F6P() 2.46902e+19 #original 0.041substance/volume #F6P #s58
	@c1:GAP(dhap) 9.75564e+17 #original 0.00162substance/volume #GAP #s59
	@c1:PEP() 7.8286e+18 #original 0.013substance/volume #PEP #s60
	@c1:CO_sub_2_endsub_() 602200000.0000001 #original 1e-12substance/volume #CO_sub_2_endsub_ #s64
	@c1:GAP(dhap!916).DHAP(gap!916) 4.082916e+17 #original 0.000678substance/volume #F16BP #s66
	@c1:DHAP(gap) 2.16792e+19 #original 0.036substance/volume #DHAP #s67
	@c1:s13BPG() 5.233118e+17 #original 0.000869substance/volume #s13BPG #s68
	@c1:s3PG() 4.27562e+19 #original 0.071substance/volume #s3PG #s69
	@c1:s2PG() 5.4198e+18 #original 0.009substance/volume #s2PG #s70
	@c1:H_sub_2_endsub_O() 602200000.0000001 #original 1e-12substance/volume #H_sub_2_endsub_O #s71
	@c1:G1P() 1.2044000000000002e+19 #original 0.02substance/volume #G1P #s72
	@c1:UDP(glycogen!915).Glycogen(udp!915) 5.961780000000001e+19 #original 0.099substance/volume #UDPG #s73
	@c1:UTP() 1.168268e+20 #original 0.194substance/volume #UTP #s74
	@c1:UDP(glycogen) 2.0474800000000004e+19 #original 0.034substance/volume #UDP #s75
	@c1:s6PGN() 602200000.0000001 #original 1e-12substance/volume #s6PGN #s76
	@c1:Glycerol_3_P() 9.51476e+19 #original 0.158substance/volume #Glycerol_3_P #s77
	@c1:$s78() 602200000.0000001 #original 1e-12substance/volume #s78 #s78
	@c1:PYR() 3.3121000000000004e+19 #original 0.055substance/volume #PYR #s61
	@c1:G16BP() 4.2154e+18 #original 0.007substance/volume #G16BP #s79
	@c2:O_sub_2_endsub(_e~_E,mb) 1.8672441890402226e+19 #original 0.128856substance/volume #O_sub_2_e_endsub #s82
	@c1:Mb(o_sub_2_endsub) 3.269946e+18 #original 0.00543substance/volume #Mb #s83
	@c1:O_sub_2_endsub(_e~0,mb!917).Mb(o_sub_2_endsub!917) 1.11407e+20 #original 0.185substance/volume #MbO_sub_2_endsub_ #s84
	@c1:O_sub_2_endsub(_e~0,mb) 6.63437718e+19 #original 0.110169substance/volume #O_sub_2_endsub #s65
	@c3:O_sub_2_v_endsub() 5.463166264732e+18 #original 0.132593substance/volume #O_sub_2_v_endsub #s81
	@c1:$NAD() 1.3588643e+21 #original 2.2565substance/volume #NAD #s62
	@c1:$NADH() 4.2966970000000005e+20 #original 0.7135substance/volume #NADH #s63
	@default:$L_super__minus__endsuper__sub_o_endsub_(L_super__minus__endsuper__sub_i_endsub_~0) 6.804859999999999e+20 #original 1.13substance/volume #L_super__minus__endsuper__sub_o_endsub_ #s39
	@c1:$Glucose() 1.1502020000000001e+21 #original 1.91substance/volume #Glucose #s56
end seed species
begin observables
	Species H_super__plus__endsuper__sub_i_endsub__c1 @c1:H_super__plus__endsuper__sub_i_endsub_() #H_super__plus__endsuper__sub_i_endsub_
	Species H_super__plus__endsuper__sub_o_endsub__default @default:H_super__plus__endsuper__sub_o_endsub_() #H_super__plus__endsuper__sub_o_endsub_
	Species OH_super__minus__endsuper__sub_i_endsub__c1 @c1:OH_super__minus__endsuper__sub_i_endsub_() #OH_super__minus__endsuper__sub_i_endsub_
	Species OH_super__minus__endsuper__sub_o_endsub__default @default:OH_super__minus__endsuper__sub_o_endsub_() #OH_super__minus__endsuper__sub_o_endsub_
	Species Na_super__plus__endsuper__sub_i_endsub__c1 @c1:Na_super__plus__endsuper__sub_i_endsub_() #Na_super__plus__endsuper__sub_i_endsub_
	Species Na_super__plus__endsuper__sub_o_endsub__default @default:Na_super__plus__endsuper__sub_o_endsub_() #Na_super__plus__endsuper__sub_o_endsub_
	Species HCO_sub_3_endsub__super__minus__endsuper__sub_i_endsub__c1 @c1:HCO_sub_3_endsub__super__minus__endsuper__sub_i_endsub_() #HCO_sub_3_endsub__super__minus__endsuper__sub_i_endsub_
	Species HCO_sub_3_endsub__super__minus__endsuper__sub_o_endsub__default @default:HCO_sub_3_endsub__super__minus__endsuper__sub_o_endsub_() #HCO_sub_3_endsub__super__minus__endsuper__sub_o_endsub_
	Species Cl_super__minus__endsuper__sub_i_endsub__c1 @c1:Cl_super__minus__endsuper__sub_i_endsub_() #Cl_super__minus__endsuper__sub_i_endsub_
	Species Cl_super__minus__endsuper__sub_o_endsub__default @default:Cl_super__minus__endsuper__sub_o_endsub_() #Cl_super__minus__endsuper__sub_o_endsub_
	Species ATP_c1 @c1:ATP() #ATP
	Species ADP_c1 @c1:ADP() #ADP
	Species P_sub_i_endsub__c1 @c1:P_sub_i_endsub_() #P_sub_i_endsub_
	Species CrP_c1 @c1:CrP() #CrP
	Species Cr_c1 @c1:Cr() #Cr
	Species AMP_c1 @c1:AMP() #AMP
	Species Glycogen_c1 @c1:Glycogen(udp) #Glycogen
	Species L_super__minus__endsuper__sub_i_endsub__c1 @c1:L_super__minus__endsuper__sub_o_endsub_(L_super__minus__endsuper__sub_i_endsub_~L_super__minus__endsuper__sub_i_endsub_) #L_super__minus__endsuper__sub_i_endsub_
	Species LacticAcid_c1 @c1:LacticAcid() #Lactic Acid
	Species G6P_c1 @c1:G6P() #G6P
	Species F6P_c1 @c1:F6P() #F6P
	Species GAP_c1 @c1:GAP(dhap) #GAP
	Species PEP_c1 @c1:PEP() #PEP
	Species CO_sub_2_endsub__c1 @c1:CO_sub_2_endsub_() #CO_sub_2_endsub_
	Species F16BP_c1 @c1:GAP(dhap!916).DHAP(gap!916) #F16BP
	Species DHAP_c1 @c1:DHAP(gap) #DHAP
	Species s13BPG_c1 @c1:s13BPG() #13BPG
	Species s3PG_c1 @c1:s3PG() #3PG
	Species s2PG_c1 @c1:s2PG() #2PG
	Species H_sub_2_endsub_O_c1 @c1:H_sub_2_endsub_O() #H_sub_2_endsub_O
	Species G1P_c1 @c1:G1P() #G1P
	Species UDPG_c1 @c1:UDP(glycogen!915).Glycogen(udp!915) #UDPG
	Species UTP_c1 @c1:UTP() #UTP
	Species UDP_c1 @c1:UDP(glycogen) #UDP
	Species s6PGN_c1 @c1:s6PGN() #6PGN
	Species Glycerol_3_P_c1 @c1:Glycerol_3_P() #Glycerol-3-P
	Species s78_c1 @c1:s78() #s78
	Species PYR_c1 @c1:PYR() #PYR
	Species G16BP_c1 @c1:G16BP() #G16BP
	Species O_sub_2_e_endsub_c2 @c2:O_sub_2_endsub(_e~_E,mb) #O_sub_2,e_endsub
	Species Mb_c1 @c1:Mb(o_sub_2_endsub) #Mb
	Species MbO_sub_2_endsub__c1 @c1:O_sub_2_endsub(_e~0,mb!917).Mb(o_sub_2_endsub!917) #MbO_sub_2_endsub_
	Species O_sub_2_endsub_c1 @c1:O_sub_2_endsub(_e~0,mb) #O_sub_2_endsub
	Species O_sub_2_v_endsub_c3 @c3:O_sub_2_v_endsub() #O_sub_2,v_endsub
	Species NAD_c1 @c1:NAD() #NAD
	Species NADH_c1 @c1:NADH() #NADH
	Species L_super__minus__endsuper__sub_o_endsub__default @default:L_super__minus__endsuper__sub_o_endsub_(L_super__minus__endsuper__sub_i_endsub_~0) #L_super__minus__endsuper__sub_o_endsub_
	Species Glucose_c1 @c1:Glucose() #Glucose
end observables
begin functions
	HCO3_i() = 10^(-pH_o + pH_sub_i_endsub__c1)*HCO3_o
	beta_CO2() = 2.3*HCO3_i
	beta_i() = 222.6 - 28*pH_sub_i_endsub__c1
	rateOf_re58() = re58
	rateOf_re46() = re46
	rateOf_re15() = re15
	H_active() = 1000*10^(-pH_sub_i_endsub__c1)
	rateOf_re20() = re20
	rateOf_re54() = re54
	rateOf_re37() = re37
	J_AE() = -0.253777677451667*pH_sub_i_endsub__c1^4 + 5.03765028333167*pH_sub_i_endsub__c1^3 - 30.38588842928*pH_sub_i_endsub__c1^2 + 32.9416001918317*pH_sub_i_endsub__c1 + 139.7255619933
	J_NHS() = 0.0388167500366667*pH_sub_i_endsub__c1^3 - 0.752941956028333*pH_sub_i_endsub__c1^2 + 4.779511636835*pH_sub_i_endsub__c1 - 9.869470400235
	J_CHE() = -0.00454268856666667*pH_sub_i_endsub__c1^4 + 0.205216852566667*pH_sub_i_endsub__c1^3 - 3.029507176345*pH_sub_i_endsub__c1^2 + 18.476985715675*pH_sub_i_endsub__c1 - 40.3806610526417
	J_NHE() = 0.34348761204*pH_sub_i_endsub__c1^4 - 10.1092714337933*pH_sub_i_endsub__c1^3 + 111.684422276283*pH_sub_i_endsub__c1^2 - 548.842460803527*pH_sub_i_endsub__c1 + 1012.13224236861
	fRate0() = J_NHE
	fRate1() = J_NHS
	fRate2() = J_NHS
	fRate3() = J_AE
	fRate4() = J_AE
	fRate5() = J_CHE
	fRate6() = J_CHE
	fRate7() = VR_cellcyto*X_atpase*level/(exp(10.0 - 10000.0*ATP_c1) + 1)
	fRate9() = K_AK*X_AK
	fRate10() = Vmax_Lac_flux_in/(Km_Lac_flux_in + L_super__minus__endsuper__sub_o_endsub__default)
	fRate11() = rateOf_re15
	fRate12() = Vmax_Lac_flux_out/(Km_Lac_flux_out + L_super__minus__endsuper__sub_i_endsub__c1)
	fRate13() = rateOf_re20
	fRate14() = X_Lac*(H_active*L_super__minus__endsuper__sub_i_endsub__c1/K_Lac - LacticAcid_c1)
	fRate15() = switch_kashi*(-G6P_c1*Vr_hk/Kmr_hk + Glucose_c1*Vf_hk/(Kmf_hk*(1 + Km_ATP_hk/ATP_c1)))/(G6P_c1/Kmr_hk + Glucose_c1/Kmf_hk + 1)
	fRate16() = Kmr_pgi*Vf_pgi*switch_kashi/(F6P_c1*Kmf_pgi + Kmr_pgi*(G6P_c1 + Kmf_pgi))
	fRate16m() = Kmf_pgi*Vr_pgi*switch_kashi/(G6P_c1*Kmr_pgi + Kmf_pgi*(F6P_c1 + Kmr_pgi))
	fRate17() = F6P_c1*Vf_pfk*switch_kashi/((1 + Km_ATP_pfk/ATP_c1)*(F6P_c1 + Kmf_pfk))
	fRate18() = Vf_fbp*switch_kashi/(F16BP_c1 + Kmf_fbp)
	fRate19() = Vf_tpi*switch_kashi/(DHAP_c1 + Kmf_tpi)
	fRate20() = GAP_c1*Vf_gapdh*switch_kashi/((GAP_c1 + Kmf_gapdh)*(Km_NAD/NAD_c1 + 1))
	fRate21() = switch_kashi*(-Vr_pgk*s3PG_c1/(Kmr_pgk*(1 + Km_ATP_pgk/ATP_c1)*(exp(10.0 - 100000.0*s3PG_c1) + 1)) + Vf_pgk*s13BPG_c1/(Kmf_pgk*(1 + Km_ADP_pgk/ADP_c1)*(exp(10.0 - 100000.0*s13BPG_c1) + 1)))/(1 + s3PG_c1/Kmr_pgk + s13BPG_c1/Kmf_pgk)
	fRate22() = Kmr_pglym*Vf_pglym*switch_kashi/(Kmf_pglym*s2PG_c1*exp(10 - 100000*s3PG_c1) + Kmf_pglym*s2PG_c1 + Kmr_pglym*(Kmf_pglym*exp(10 - 100000*s3PG_c1) + Kmf_pglym + s3PG_c1*exp(10 - 100000*s3PG_c1) + s3PG_c1))
	fRate22m() = Kmf_pglym*Vr_pglym*switch_kashi/(Kmf_pglym*(Kmr_pglym*exp(10 - 100000*s2PG_c1) + Kmr_pglym + s2PG_c1*exp(10 - 100000*s2PG_c1) + s2PG_c1) + Kmr_pglym*s3PG_c1*exp(10 - 100000*s2PG_c1) + Kmr_pglym*s3PG_c1)
	fRate23() = switch_kashi*(-PEP_c1*Vr_eno/(Kmr_eno*(exp(10.0 - 100000.0*PEP_c1) + 1)) + Vf_eno*s2PG_c1/(Kmf_eno*(exp(10.0 - 100000.0*s2PG_c1) + 1)))/(1 + PEP_c1/Kmr_eno + s2PG_c1/Kmf_eno)
	fRate24() = switch_kashi*(-PYR_c1*Vr_pk/(Kmr_pk*(exp(10.0 - 100000.0*PYR_c1) + 1)) + PEP_c1*Vf_pk/(Kmf_pk*(1 + Km_ADP_pk/ADP_c1)*(exp(10.0 - 100000.0*PEP_c1) + 1)))/(1 + PYR_c1/Kmr_pk + PEP_c1/Kmf_pk)
	fRate25() = Kmr_pgm*Vf_pgm*switch_GSGP/(G6P_c1*Kmf_pgm + Kmr_pgm*(G1P_c1 + Kmf_pgm))
	fRate25m() = Kmf_pgm*Vr_pgm*switch_GSGP/(G1P_c1*Kmr_pgm + Kmf_pgm*(G6P_c1 + Kmr_pgm))
	fRate26() = X_up*(G1P_c1*K_up - UDPG_c1*f_up_eq)/(1 + AMP_c1^(-h)*Km_AMP_2^h)
	fRate27() = AMP_c1^h*Vf_gs_D_form/(AMP_c1^h*(Kmf_gs_D_form + UDPG_c1) + Km_AMP_2^h*Kmf_gs_D_form + Km_AMP_2^h*UDPG_c1)
	fRate28() = (-G1P_c1*Vr_gp/Kmr_gp + Glycogen_c1*Vf_gp/Kmf_gp)/((1 + AMP_c1^(-h)*Km_AMP_2^h)*(G1P_c1/Kmr_gp + Glycogen_c1/Kmf_gp + 1))
	fRate29() = PYR_c1*Vf_ldh*switch_LDH/((Kmf_ldh + PYR_c1)*(Km_NADH/NADH_c1 + 1))
	fRate30() = 0.095*rateOf_re37*switch_kashi/v_PGI_ss
	fRate31() = AMP_c1^h*Vf_gs_I_form/(AMP_c1^h*(Kmf_gs_I_form + UDPG_c1) + Km_AMP_2^h*Kmf_gs_I_form + Km_AMP_2^h*UDPG_c1)
	fRate32() = 20.0/(DHAP_c1*Km_NADH_re54 + DHAP_c1*NADH_c1 + Kia_NADH*Km_DHAP + Km_DHAP*NADH_c1)
	fRate33() = rateOf_re54
	fRate34() = ADP_c1*O_sub_2_endsub_c1*rateOf_re46/((ADP_c1 + Km_ADP)*(Km_O2 + O_sub_2_endsub_c1))
	fRate35() = switch_kashi*(-Vr_GBPS*s3PG_c1/(Kmr_GBPS*(1 + Km_GBP/G16BP_c1)) + Vf_GBPS*s13BPG_c1/(Kmf_GBPS*(1 + Km_G1P/G1P_c1)))/(1 + s3PG_c1/Kmr_GBPS + s13BPG_c1/Kmf_GBPS)
	fRate36() = rateOf_re58
end functions
begin reaction rules
	re2_reactants_0: 0  -> Na_super__plus__endsuper__sub_o_endsub_()@default -1*(fRate0())
	re2_products_0: 0  -> Na_super__plus__endsuper__sub_i_endsub_()@c1 fRate0()
	re3_reactants_0: 0  -> Na_super__plus__endsuper__sub_o_endsub_()@default -1*(fRate1())
	re3_products_0: 0  -> Na_super__plus__endsuper__sub_i_endsub_()@c1 fRate1()
	re4_reactants_0: 0  -> HCO_sub_3_endsub__super__minus__endsuper__sub_o_endsub_()@default -1*(fRate2())
	re4_products_0: 0  -> HCO_sub_3_endsub__super__minus__endsuper__sub_i_endsub_()@c1 fRate2()
	re5_reactants_0: 0  -> HCO_sub_3_endsub__super__minus__endsuper__sub_i_endsub_()@c1 -1*(fRate3())
	re5_products_0: 0  -> HCO_sub_3_endsub__super__minus__endsuper__sub_o_endsub_()@default fRate3()
	re6_reactants_0: 0  -> Cl_super__minus__endsuper__sub_o_endsub_()@default -1*(fRate4())
	re6_products_0: 0  -> Cl_super__minus__endsuper__sub_i_endsub_()@c1 fRate4()
	re7_reactants_0: 0  -> Cl_super__minus__endsuper__sub_o_endsub_()@default -1*(fRate5())
	re7_products_0: 0  -> Cl_super__minus__endsuper__sub_i_endsub_()@c1 fRate5()
	re8_reactants_0: 0  -> OH_super__minus__endsuper__sub_i_endsub_()@c1 -1*(fRate6())
	re8_products_0: 0  -> OH_super__minus__endsuper__sub_o_endsub_()@default fRate6()
	re11_reactants_0: 0  -> ATP()@c1 -1*(fRate7())
	re11_products_0: 0  -> ADP()@c1 fRate7()
	re11_products_1: 0  -> P_sub_i_endsub_()@c1 fRate7()
	re11_products_2: 0  -> H_super__plus__endsuper__sub_i_endsub_()@c1 fRate7()
	re12: ADP()@c1 + CrP()@c1 -> ATP()@c1 + Cr()@c1 r9_k1
	re13: ADP()@c1 + ADP()@c1 <-> ATP()@c1 + AMP()@c1 fRate9(),X_AK
	re15: L_super__minus__endsuper__sub_o_endsub_(L_super__minus__endsuper__sub_i_endsub_~0)@default -> L_super__minus__endsuper__sub_o_endsub_(L_super__minus__endsuper__sub_i_endsub_~L_super__minus__endsuper__sub_i_endsub_)@c1 fRate10()
	re16_reactants_0: 0  -> H_super__plus__endsuper__sub_o_endsub_()@default -1*(fRate11())
	re16_products_0: 0  -> H_super__plus__endsuper__sub_i_endsub_()@c1 fRate11()
	re20: L_super__minus__endsuper__sub_o_endsub_(L_super__minus__endsuper__sub_i_endsub_~L_super__minus__endsuper__sub_i_endsub_)@c1 -> L_super__minus__endsuper__sub_o_endsub_(L_super__minus__endsuper__sub_i_endsub_~0)@default fRate12()
	re21_reactants_0: 0  -> H_super__plus__endsuper__sub_i_endsub_()@c1 -1*(fRate13())
	re21_products_0: 0  -> H_super__plus__endsuper__sub_o_endsub_()@default fRate13()
	re22_reactants_0: 0  -> L_super__minus__endsuper__sub_o_endsub_(L_super__minus__endsuper__sub_i_endsub_~L_super__minus__endsuper__sub_i_endsub_)@c1 -1*(fRate14())
	re22_reactants_1: 0  -> H_super__plus__endsuper__sub_i_endsub_()@c1 -1*(fRate14())
	re22_products_0: 0  -> LacticAcid()@c1 fRate14()
	re36_reactants_0: 0  -> Glucose()@c1 -1*(fRate15())
	re36_reactants_1: 0  -> ATP()@c1 -1*(fRate15())
	re36_products_0: 0  -> G6P()@c1 fRate15()
	re36_products_1: 0  -> ADP()@c1 fRate15()
	re36_products_2: 0  -> H_super__plus__endsuper__sub_i_endsub_()@c1 fRate15()
	re37: G6P()@c1 <-> F6P()@c1 fRate16(),fRate16m()
	re39_reactants_0: 0  -> F6P()@c1 -1*(fRate17())
	re39_reactants_1: 0  -> ATP()@c1 -1*(fRate17())
	re39_products_0: 0  -> GAP(dhap!916)@c1.DHAP(gap!916)@c1 fRate17()
	re39_products_1: 0  -> ADP()@c1 fRate17()
	re39_products_2: 0  -> H_super__plus__endsuper__sub_i_endsub_()@c1 fRate17()
	re40: GAP(dhap!916)@c1.DHAP(gap!916)@c1 -> GAP(dhap)@c1 + DHAP(gap)@c1 fRate18()
	re41: DHAP(gap)@c1 -> GAP(dhap)@c1 fRate19()
	re42_reactants_0: 0  -> GAP(dhap)@c1 -1*(fRate20())
	re42_reactants_1: 0  -> NAD()@c1 -1*(fRate20())
	re42_reactants_2: 0  -> P_sub_i_endsub_()@c1 -1*(fRate20())
	re42_products_0: 0  -> s13BPG()@c1 fRate20()
	re42_products_1: 0  -> NADH()@c1 fRate20()
	re42_products_2: 0  -> H_super__plus__endsuper__sub_i_endsub_()@c1 fRate20()
	re43_reactants_0: 0  -> s13BPG()@c1 -1*(fRate21())
	re43_reactants_1: 0  -> ADP()@c1 -1*(fRate21())
	re43_products_0: 0  -> s3PG()@c1 fRate21()
	re43_products_1: 0  -> ATP()@c1 fRate21()
	re44: s3PG()@c1 <-> s2PG()@c1 fRate22(),fRate22m()
	re45_reactants_0: 0  -> s2PG()@c1 -1*(fRate23())
	re45_products_0: 0  -> PEP()@c1 fRate23()
	re45_products_1: 0  -> H_sub_2_endsub_O()@c1 fRate23()
	re46_reactants_0: 0  -> PEP()@c1 -1*(fRate24())
	re46_reactants_1: 0  -> ADP()@c1 -1*(fRate24())
	re46_reactants_2: 0  -> H_super__plus__endsuper__sub_i_endsub_()@c1 -1*(fRate24())
	re46_products_0: 0  -> PYR()@c1 fRate24()
	re46_products_1: 0  -> ATP()@c1 fRate24()
	re47: G1P()@c1 <-> G6P()@c1 fRate25(),fRate25m()
	re48_reactants_0: 0  -> G1P()@c1 -1*(fRate26()) #Modifiers(s35)
	re48_reactants_1: 0  -> UTP()@c1 -1*(fRate26()) #Modifiers(s35)
	re48_products_0: 0  -> UDP(glycogen!915)@c1.Glycogen(udp!915)@c1 fRate26() #Modifiers(s35)
	re48_products_1: 0  -> P_sub_i_endsub_()@c1 2.0*fRate26() #Modifiers(s35)
	re49: UDP(glycogen!915)@c1.Glycogen(udp!915)@c1 -> Glycogen(udp)@c1 + UDP(glycogen)@c1 fRate27() #Modifiers(s35)
	re50_reactants_0: 0  -> Glycogen(udp)@c1 -1*(fRate28()) #Modifiers(s35)
	re50_reactants_1: 0  -> P_sub_i_endsub_()@c1 -1*(fRate28()) #Modifiers(s35)
	re50_products_0: 0  -> G1P()@c1 fRate28() #Modifiers(s35)
	re51_reactants_0: 0  -> PYR()@c1 -1*(fRate29())
	re51_reactants_1: 0  -> NADH()@c1 -1*(fRate29())
	re51_reactants_2: 0  -> H_super__plus__endsuper__sub_i_endsub_()@c1 -1*(fRate29())
	re51_products_0: 0  -> L_super__minus__endsuper__sub_o_endsub_(L_super__minus__endsuper__sub_i_endsub_~L_super__minus__endsuper__sub_i_endsub_)@c1 fRate29()
	re51_products_1: 0  -> NAD()@c1 fRate29()
	re52_reactants_0: 0  -> G6P()@c1 -1*(fRate30())
	re52_products_0: 0  -> s6PGN()@c1 fRate30()
	re52_products_1: 0  -> P_sub_i_endsub_()@c1 fRate30()
	re53: UDP(glycogen!915)@c1.Glycogen(udp!915)@c1 -> Glycogen(udp)@c1 + UDP(glycogen)@c1 fRate31() #Modifiers(s35)
	re54: DHAP(gap)@c1 + NADH()@c1 -> Glycerol_3_P()@c1 + NAD()@c1 fRate32()
	re55_reactants_0: 0  -> Glycerol_3_P()@c1 -1*(fRate33())
	re55_products_0: 0  -> s78()@c1 fRate33()
	re55_products_1: 0  -> P_sub_i_endsub_()@c1 fRate33()
	re56_reactants_0: 0  -> ADP()@c1 -1*15.0*(fRate34())
	re56_reactants_1: 0  -> PYR()@c1 -1*(fRate34())
	re56_reactants_2: 0  -> O_sub_2_endsub(_e~0,mb)@c1 -1*3.0*(fRate34())
	re56_reactants_3: 0  -> P_sub_i_endsub_()@c1 -1*15.0*(fRate34())
	re56_reactants_4: 0  -> NADH()@c1 -1*(fRate34())
	re56_products_0: 0  -> ATP()@c1 15.0*fRate34()
	re56_products_1: 0  -> CO_sub_2_endsub_()@c1 3.0*fRate34()
	re56_products_2: 0  -> NAD()@c1 fRate34()
	re58_reactants_0: 0  -> s13BPG()@c1 -1*(fRate35())
	re58_reactants_1: 0  -> G1P()@c1 -1*(fRate35())
	re58_products_0: 0  -> s3PG()@c1 fRate35()
	re58_products_1: 0  -> G16BP()@c1 fRate35()
	re59_reactants_0: 0  -> G16BP()@c1 -1*(fRate36())
	re59_products_0: 0  -> s78()@c1 fRate36()
	re59_products_1: 0  -> P_sub_i_endsub_()@c1 2.0*fRate36()
	re60: O_sub_2_endsub(_e~_E,mb)@c2 <-> O_sub_2_endsub(_e~0,mb)@c1 PS_ec,PS_ec
	re61: O_sub_2_v_endsub()@c3 <-> O_sub_2_endsub(_e~_E,mb)@c2 PS_ve,PS_ve
	re62: Mb(o_sub_2_endsub)@c1 + O_sub_2_endsub(_e~0,mb)@c1 <-> O_sub_2_endsub(_e~0,mb!917)@c1.Mb(o_sub_2_endsub!917)@c1 k_a,k_d
end reaction rules
end model
