###
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/32706790']
#@BQB_IS:['http://identifiers.org/doid/DOID:0080600']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606', 'http://identifiers.org/taxonomy/2697049']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000028']
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000978', 'http://identifiers.org/biomodels.db/MODEL2012010001']
#@creatorEmail:'kramachandran@ebi.ac.uk'
#@creatorName:'Ramachandran Kausthubh'
#@notes:'This is an atomized translation of an SBML model created on 14/08/2021. The original model has 4 molecules and 3 reactions. The translated model has 3 molecules and 4 rules'
###
begin model
begin parameters
	beta 1.3
	sigma 0.311
	gamma 0.3389830508
	N 36196938.0
	Event_trigger 1.0
	epsilon 0
end parameters
begin molecule types
	#^ bqbiol:is ido:0000514, ncit:C171133, ido:0000597
	Exposed(Infected~Infected~0)
	#^ bqbiol:is ido:0000514
	Susceptible()
	#^ bqbiol:hasProperty ido:0000621
	Recovered()
end molecule types
begin seed species
	Exposed(Infected~Infected) 1.2044e+24 #original 2.0substance/volume #Infected #Infected
	Susceptible() (36196938.0) #Susceptible
end seed species
begin observables
	Species Susceptible Susceptible() #Susceptible
	Species Exposed Exposed(Infected~0) #Exposed
	Species Infected Exposed(Infected~Infected) #Infected
	Species Recovered Recovered() #Recovered
end observables
begin functions
	Cumulative_cases() = Infected + Recovered
	fRate0() = Infected*Susceptible*beta*(1 - epsilon)/N
end functions
begin reaction rules
	Susceptible_to_Exposed_reactants_0: 0  -> Susceptible() -1*(fRate0()) #Modifiers(Infected)
	Susceptible_to_Exposed_products_0: 0  -> Exposed(Infected~0) fRate0() #Modifiers(Infected)
	Exposed_to_Infected: Exposed(Infected~0) -> Exposed(Infected~Infected) sigma
	Infected_to_Recovered: Exposed(Infected~Infected) -> Recovered() gamma
end reaction rules
end model
