###
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/doi/10.1007/BF00713556']
#@BQB_IS:['http://identifiers.org/chebi/CHEBI:37926', 'http://identifiers.org/go/GO:0006897', 'http://identifiers.org/chebi/CHEBI:52083']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/366501']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046']
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000986', 'http://identifiers.org/biomodels.db/MODEL2102090001']
#@creatorEmail:'kramachandran@ebi.ac.uk'
#@creatorName:'Ramachandran Kausthubh'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 8 molecules and 8 reactions. The translated model has 2 molecules and 8 rules'
###
begin model
begin parameters
	FITC_Dextran_max_uptake_rate 585.0
	lambda_single_compartment_model_FITC_Dextran 0.016
	Pyranine_max_uptake_rate 578.0
	lambda_single_compartment_model_Pyranine 0.01
	FITC_Dextran_influx_rate 6.7
	lambda_compartment_1 0.037
	lambda_compartment_2 0.037
	lambda_compartment_3 0.035
	Pyranine_influx_rate 5.3
	Pyranine_addition_trigger 0
end parameters
begin molecule types
	Pyranine_three_compartment_model_compartment(_1~_1~0,_2~_2~0,_3~_3~0)
	FITC_Dextran_three_compartment_model_compartment(_1~_1~0,_2~_2~0,_3~_3~0)
end molecule types
begin seed species
end seed species
begin observables
	Species FITC_Dextran_three_compartment_model_compartment_1 FITC_Dextran_three_compartment_model_compartment(_1~_1,_2~0,_3~0) #FITC_Dextran_three_compartment_model_compartment_1
	Species FITC_Dextran_three_compartment_model_compartment_2 FITC_Dextran_three_compartment_model_compartment(_1~0,_2~_2,_3~0) #FITC_Dextran_three_compartment_model_compartment_2
	Species FITC_Dextran_three_compartment_model_compartment_3 FITC_Dextran_three_compartment_model_compartment(_1~0,_2~0,_3~_3) #FITC_Dextran_three_compartment_model_compartment_3
	Species Pyranine_three_compartment_model_compartment_1 Pyranine_three_compartment_model_compartment(_1~_1,_2~0,_3~0) #Pyranine_three_compartment_model_compartment_1
	Species Pyranine_three_compartment_model_compartment_2 Pyranine_three_compartment_model_compartment(_1~0,_2~_2,_3~0) #Pyranine_three_compartment_model_compartment_2
	Species Pyranine_three_compartment_model_compartment_3 Pyranine_three_compartment_model_compartment(_1~0,_2~0,_3~_3) #Pyranine_three_compartment_model_compartment_3
end observables
begin functions
	Total_Pyranine() = Pyranine_three_compartment_model_compartment_1 + Pyranine_three_compartment_model_compartment_2 + Pyranine_three_compartment_model_compartment_3
	Total_FITC_Dextran() = FITC_Dextran_three_compartment_model_compartment_1 + FITC_Dextran_three_compartment_model_compartment_2 + FITC_Dextran_three_compartment_model_compartment_3
	Pyranine_single_compartment_model_ar() = Pyranine_addition_trigger*Pyranine_max_uptake_rate*(1 - exp(-lambda_single_compartment_model_Pyranine*(time() - 90)))
	FITC_Dextran_single_compartment_model_ar() = FITC_Dextran_max_uptake_rate*(1 - exp(-lambda_single_compartment_model_FITC_Dextran*time()))
	fRate4() = Pyranine_addition_trigger*Pyranine_influx_rate
end functions
begin reaction rules
	FITC_Dextran_influx_rate_0: 0  -> FITC_Dextran_three_compartment_model_compartment(_1~_1,_2~0,_3~0) FITC_Dextran_influx_rate
	FITC_Dextran_transfer_between_endo_lysosomal_compartments_1_and_2: FITC_Dextran_three_compartment_model_compartment(_1~_1,_2~0,_3~0) -> FITC_Dextran_three_compartment_model_compartment(_1~0,_2~_2,_3~0) lambda_compartment_1
	FITC_Dextran_transfer_between_endo_lysosomal_compartments_2_and_3: FITC_Dextran_three_compartment_model_compartment(_1~0,_2~_2,_3~0) -> FITC_Dextran_three_compartment_model_compartment(_1~0,_2~0,_3~_3) lambda_compartment_2
	FITC_Dextran_efflux_rate: FITC_Dextran_three_compartment_model_compartment(_1~0,_2~0,_3~_3) -> 0  lambda_compartment_3
	Pyranine_influx_rate_0: 0  -> Pyranine_three_compartment_model_compartment(_1~_1,_2~0,_3~0) fRate4()
	Pyranine_transfer_between_endo_lysosomal_compartments_1_and_2: Pyranine_three_compartment_model_compartment(_1~_1,_2~0,_3~0) -> Pyranine_three_compartment_model_compartment(_1~0,_2~_2,_3~0) lambda_compartment_1
	Pyranine_transfer_between_endo_lysosomal_compartments_2_and_3: Pyranine_three_compartment_model_compartment(_1~0,_2~_2,_3~0) -> Pyranine_three_compartment_model_compartment(_1~0,_2~0,_3~_3) lambda_compartment_2
	Pyranine_efflux_rate: Pyranine_three_compartment_model_compartment(_1~0,_2~0,_3~_3) -> 0  lambda_compartment_3
end reaction rules
end model
