###
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/doi/10.1007/BF00713556']
#@BQB_IS:['http://identifiers.org/chebi/CHEBI:37926', 'http://identifiers.org/chebi/CHEBI:52083', 'http://identifiers.org/go/GO:0006897']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/366501']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046']
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000987', 'http://identifiers.org/biomodels.db/MODEL2102100001']
#@creatorEmail:'kramachandran@ebi.ac.uk'
#@creatorName:'Ramachandran Kausthubh'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 9 molecules and 10 reactions. The translated model has 1 molecules and 10 rules'
###
begin model
begin parameters
	lambda_compartment_1 0.09
	lambda_compartment_2 0.127
	lambda_compartment_3 0.099
	lambda_compartment_4 0.09
	lambda_compartment_5 0.093
	lambda_compartment_6 0.098
	lambda_compartment_7 0.098
	lambda_compartment_8 0.111
	lambda_compartment_9 0.096
	mu 6.8
end parameters
begin molecule types
	FITC_Dextran_nine_compartment_model_compartment(_1~_1~0,_2~_2~0,_3~_3~0,_4~_4~0,_5~_5~0,_6~_6~0,_7~_7~0,_8~_8~0,_9~_9~0)
end molecule types
begin seed species
end seed species
begin observables
	Species FITC_Dextran_nine_compartment_model_compartment_1 FITC_Dextran_nine_compartment_model_compartment(_1~_1,_2~0,_3~0,_4~0,_5~0,_6~0,_7~0,_8~0,_9~0) #FITC_Dextran_nine_compartment_model_compartment_1
	Species FITC_Dextran_nine_compartment_model_compartment_2 FITC_Dextran_nine_compartment_model_compartment(_1~0,_2~_2,_3~0,_4~0,_5~0,_6~0,_7~0,_8~0,_9~0) #FITC_Dextran_nine_compartment_model_compartment_2
	Species FITC_Dextran_nine_compartment_model_compartment_3 FITC_Dextran_nine_compartment_model_compartment(_1~0,_2~0,_3~_3,_4~0,_5~0,_6~0,_7~0,_8~0,_9~0) #FITC_Dextran_nine_compartment_model_compartment_3
	Species FITC_Dextran_nine_compartment_model_compartment_4 FITC_Dextran_nine_compartment_model_compartment(_1~0,_2~0,_3~0,_4~_4,_5~0,_6~0,_7~0,_8~0,_9~0) #FITC_Dextran_nine_compartment_model_compartment_4
	Species FITC_Dextran_nine_compartment_model_compartment_5 FITC_Dextran_nine_compartment_model_compartment(_1~0,_2~0,_3~0,_4~0,_5~_5,_6~0,_7~0,_8~0,_9~0) #FITC_Dextran_nine_compartment_model_compartment_5
	Species FITC_Dextran_nine_compartment_model_compartment_6 FITC_Dextran_nine_compartment_model_compartment(_1~0,_2~0,_3~0,_4~0,_5~0,_6~_6,_7~0,_8~0,_9~0) #FITC_Dextran_nine_compartment_model_compartment_6
	Species FITC_Dextran_nine_compartment_model_compartment_7 FITC_Dextran_nine_compartment_model_compartment(_1~0,_2~0,_3~0,_4~0,_5~0,_6~0,_7~_7,_8~0,_9~0) #FITC_Dextran_nine_compartment_model_compartment_7
	Species FITC_Dextran_nine_compartment_model_compartment_8 FITC_Dextran_nine_compartment_model_compartment(_1~0,_2~0,_3~0,_4~0,_5~0,_6~0,_7~0,_8~_8,_9~0) #FITC_Dextran_nine_compartment_model_compartment_8
	Species FITC_Dextran_nine_compartment_model_compartment_9 FITC_Dextran_nine_compartment_model_compartment(_1~0,_2~0,_3~0,_4~0,_5~0,_6~0,_7~0,_8~0,_9~_9) #FITC_Dextran_nine_compartment_model_compartment_9
end observables
begin functions
	Total_FITC_Dextran() = FITC_Dextran_nine_compartment_model_compartment_1 + FITC_Dextran_nine_compartment_model_compartment_2 + FITC_Dextran_nine_compartment_model_compartment_3 + FITC_Dextran_nine_compartment_model_compartment_4 + FITC_Dextran_nine_compartment_model_compartment_5 + FITC_Dextran_nine_compartment_model_compartment_6 + FITC_Dextran_nine_compartment_model_compartment_7 + FITC_Dextran_nine_compartment_model_compartment_8 + FITC_Dextran_nine_compartment_model_compartment_9
end functions
begin reaction rules
	FITC_Dextran_transfer_between_endo_lysosomal_compartments_1_and_2: FITC_Dextran_nine_compartment_model_compartment(_1~_1,_2~0,_3~0,_4~0,_5~0,_6~0,_7~0,_8~0,_9~0) -> FITC_Dextran_nine_compartment_model_compartment(_1~0,_2~_2,_3~0,_4~0,_5~0,_6~0,_7~0,_8~0,_9~0) lambda_compartment_1
	FITC_Dextran_transfer_between_endo_lysosomal_compartments_2_and_3: FITC_Dextran_nine_compartment_model_compartment(_1~0,_2~_2,_3~0,_4~0,_5~0,_6~0,_7~0,_8~0,_9~0) -> FITC_Dextran_nine_compartment_model_compartment(_1~0,_2~0,_3~_3,_4~0,_5~0,_6~0,_7~0,_8~0,_9~0) lambda_compartment_2
	FITC_Dextran_efflux_rate: FITC_Dextran_nine_compartment_model_compartment(_1~0,_2~0,_3~0,_4~0,_5~0,_6~0,_7~0,_8~0,_9~_9) -> 0  lambda_compartment_9
	FITC_Dextran_transfer_between_endo_lysosomal_compartments_3_and_4: FITC_Dextran_nine_compartment_model_compartment(_1~0,_2~0,_3~_3,_4~0,_5~0,_6~0,_7~0,_8~0,_9~0) -> FITC_Dextran_nine_compartment_model_compartment(_1~0,_2~0,_3~0,_4~_4,_5~0,_6~0,_7~0,_8~0,_9~0) lambda_compartment_3
	FITC_Dextran_transfer_between_endo_lysosomal_compartments_4_and_5: FITC_Dextran_nine_compartment_model_compartment(_1~0,_2~0,_3~0,_4~_4,_5~0,_6~0,_7~0,_8~0,_9~0) -> FITC_Dextran_nine_compartment_model_compartment(_1~0,_2~0,_3~0,_4~0,_5~_5,_6~0,_7~0,_8~0,_9~0) lambda_compartment_4
	FITC_Dextran_transfer_between_endo_lysosomal_compartments_5_and_6: FITC_Dextran_nine_compartment_model_compartment(_1~0,_2~0,_3~0,_4~0,_5~_5,_6~0,_7~0,_8~0,_9~0) -> FITC_Dextran_nine_compartment_model_compartment(_1~0,_2~0,_3~0,_4~0,_5~0,_6~_6,_7~0,_8~0,_9~0) lambda_compartment_5
	FITC_Dextran_transfer_between_endo_lysosomal_compartments_6_and_7: FITC_Dextran_nine_compartment_model_compartment(_1~0,_2~0,_3~0,_4~0,_5~0,_6~_6,_7~0,_8~0,_9~0) -> FITC_Dextran_nine_compartment_model_compartment(_1~0,_2~0,_3~0,_4~0,_5~0,_6~0,_7~_7,_8~0,_9~0) lambda_compartment_6
	FITC_Dextran_transfer_between_endo_lysosomal_compartments_7_and_8: FITC_Dextran_nine_compartment_model_compartment(_1~0,_2~0,_3~0,_4~0,_5~0,_6~0,_7~_7,_8~0,_9~0) -> FITC_Dextran_nine_compartment_model_compartment(_1~0,_2~0,_3~0,_4~0,_5~0,_6~0,_7~0,_8~_8,_9~0) lambda_compartment_7
	FITC_Dextran_influx_rate: 0  -> FITC_Dextran_nine_compartment_model_compartment(_1~_1,_2~0,_3~0,_4~0,_5~0,_6~0,_7~0,_8~0,_9~0) mu
	FITC_Dextran_transfer_between_endo_lysosomal_compartments_8_and_9: FITC_Dextran_nine_compartment_model_compartment(_1~0,_2~0,_3~0,_4~0,_5~0,_6~0,_7~0,_8~_8,_9~0) -> FITC_Dextran_nine_compartment_model_compartment(_1~0,_2~0,_3~0,_4~0,_5~0,_6~0,_7~0,_8~0,_9~_9) lambda_compartment_8
end reaction rules
end model
