###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL6613849442', 'http://identifiers.org/biomodels.db/BIOMD0000000001']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/8983160']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0019226', 'http://identifiers.org/go/GO:0007274', 'http://identifiers.org/go/GO:0007166']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/7787']
#@creatorEmail:'lenov@ebi.ac.uk'
#@creatorName:'Le Novère Nicolas'
#@notes:'This is a plain translation of an SBML model created on 14/08/2021. The original model has 12 molecules and 17 reactions. The translated model has 12 molecules and 17 rules'
###
begin model
begin parameters
	kf_0 3000.0
	kr_0 8000.0
	kf_1 1500.0
	kr_1 16000.0
	kf_2 30000.0
	kr_2 700.0
	kf_3 3000.0
	kr_3 8.64
	kf_4 1500.0
	kr_4 17.28
	kf_5 0.54
	kr_5 10800.0
	kf_6 130.0
	kr_6 2740.0
	kf_7 3000.0
	kr_7 4.0
	kf_8 1500.0
	kr_8 8.0
	kf_9 19.7
	kr_9 3.74
	kf_10 19.85
	kr_10 1.74
	kf_11 20.0
	kr_11 0.81
	kf_12 3000.0
	kr_12 4.0
	kf_13 1500.0
	kr_13 8.0
	kf_14 0.05
	kr_14 0.0012
	kf_15 0.05
	kr_15 0.0012
	kf_16 0.05
	kr_16 0.0012
	t2 20.0
end parameters
begin molecule types
	ActiveACh2()
	Active()
	IntermediateACh2()
	Basal()
	ActiveACh()
	BasalACh2()
	DesensitisedACh2()
	Desensitised()
	Intermediate()
	IntermediateACh()
	BasalACh()
	DesensitisedACh()
end molecule types
begin seed species
	Basal() 1.66057788110262e-05 #Basal #B
end seed species
begin observables
	Species BasalACh2 BasalACh2() #BasalACh2
	Species IntermediateACh IntermediateACh() #IntermediateACh
	Species ActiveACh ActiveACh() #ActiveACh
	Species Active Active() #Active
	Species BasalACh BasalACh() #BasalACh
	Species Basal Basal() #Basal
	Species DesensitisedACh2 DesensitisedACh2() #DesensitisedACh2
	Species Desensitised Desensitised() #Desensitised
	Species IntermediateACh2 IntermediateACh2() #IntermediateACh2
	Species DesensitisedACh DesensitisedACh() #DesensitisedACh
	Species Intermediate Intermediate() #Intermediate
	Species ActiveACh2 ActiveACh2() #ActiveACh2
end observables
begin reaction rules
	React0: Basal() <-> BasalACh() kf_0,kr_0
	React1: BasalACh() <-> BasalACh2() kf_1,kr_1
	React2: BasalACh2() <-> ActiveACh2() kf_2,kr_2
	React3: Active() <-> ActiveACh() kf_3,kr_3
	React4: ActiveACh() <-> ActiveACh2() kf_4,kr_4
	React5: Basal() <-> Active() kf_5,kr_5
	React6: BasalACh() <-> ActiveACh() kf_6,kr_6
	React7: Intermediate() <-> IntermediateACh() kf_7,kr_7
	React8: IntermediateACh() <-> IntermediateACh2() kf_8,kr_8
	React9: Active() <-> Intermediate() kf_9,kr_9
	React10: ActiveACh() <-> IntermediateACh() kf_10,kr_10
	React11: ActiveACh2() <-> IntermediateACh2() kf_11,kr_11
	React12: Desensitised() <-> DesensitisedACh() kf_12,kr_12
	React13: DesensitisedACh() <-> DesensitisedACh2() kf_13,kr_13
	React14: Intermediate() <-> Desensitised() kf_14,kr_14
	React15: IntermediateACh() <-> DesensitisedACh() kf_15,kr_15
	React16: IntermediateACh2() <-> DesensitisedACh2() kf_16,kr_16
end reaction rules
end model
