###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000014', 'http://identifiers.org/biomodels.db/MODEL6616691524']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/10823939']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/biomodels.db/BIOMD0000000011']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0000165', 'http://identifiers.org/go/GO:0005078']
#@BQB_IS_HOMOLOG_TO:['http://identifiers.org/reactome/REACT_634']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/8355']
#@creatorEmail:'bshapiro@jpl.nasa.gov'
#@creatorName:'Shapiro Bruce'
#@notes:'This is a plain translation of an SBML model created on 14/08/2021. The original model has 86 molecules and 300 reactions. The translated model has 86 molecules and 300 rules'
###
begin model
begin parameters
	r1_a1 1.000000
	r2_d1 0.400000
	r3_k1 0.100000
	r4_a2 0.500000
	r5_d2 0.500000
	r6_k2 0.100000
	r7_a3 3.300000
	r8_d3 0.420000
	r9_k3 0.100000
	r10_a4 10.000000
	r11_d4 0.800000
	r12_k4 0.100000
	r13_a5 3.300000
	r14_d5 0.400000
	r15_k5 0.100000
	r16_a6 10.000000
	r17_d6 0.800000
	r18_k6 0.100000
	r19_a7 20.000000
	r20_d7 0.600000
	r21_k7 0.100000
	r22_a8 5.000000
	r23_d8 0.400000
	r24_k8 0.100000
	r25_a9 20.000000
	r26_d9 0.600000
	r27_k9 0.100000
	r28_a10 5.000000
	r29_d10 0.400000
	r30_k10 0.100000
	r31_kon 10.000000
	r32_koff 0.500000
	r33_kon 10.000000
	r34_koff 0.500000
	r35_kon 10.000000
	r36_koff 0.500000
	r37_kon 10.000000
	r38_koff 0.500000
	r39_kon 10.000000
	r40_koff 0.500000
	r41_kon 10.000000
	r42_koff 0.500000
	r43_kon 10.000000
	r44_koff 0.500000
	r45_kon 10.000000
	r46_koff 0.500000
	r47_kon 10.000000
	r48_koff 0.500000
	r49_kon 10.000000
	r50_koff 0.500000
	r51_kon 10.000000
	r52_koff 0.500000
	r53_kon 10.000000
	r54_koff 0.500000
	r55_kpon 0.000000
	r56_kpoff 0.050000
	r57_kpon 0.000000
	r58_kpoff 0.050000
	r59_kpon 0.000000
	r60_kpoff 0.050000
	r61_kpon 0.000000
	r62_kpoff 0.050000
	r63_kpon 0.000000
	r64_kpoff 0.050000
	r65_kpon 0.000000
	r66_kpoff 0.050000
	r67_kpon 0.000000
	r68_kpoff 0.050000
	r69_kpon 0.000000
	r70_kpoff 0.050000
	r71_kpon 0.000000
	r72_kpoff 0.050000
	r73_kpon 0.000000
	r74_kpoff 0.050000
	r75_kpon 0.000000
	r76_kpoff 0.050000
	r77_kpon 0.000000
	r78_kpoff 0.050000
	r79_kpon 0.000000
	r80_kpoff 0.050000
	r81_kpon 0.000000
	r82_kpoff 0.050000
	r83_kpon 0.000000
	r84_kpoff 0.050000
	r85_kpon 0.000000
	r86_kpoff 0.050000
	r87_kpon 0.000000
	r88_kpoff 0.050000
	r89_kpon 0.000000
	r90_kpoff 0.050000
	r91_kpon 0.000000
	r92_kpoff 0.050000
	r93_kpon 0.000000
	r94_kpoff 0.050000
	r95_kpon 0.000000
	r96_kpoff 0.050000
	r97_kpon 0.000000
	r98_kpoff 0.050000
	r99_kpon 0.000000
	r100_kpoff 0.050000
	r101_kpon 0.000000
	r102_kpoff 0.050000
	r103_kon 10.000000
	r104_koff 0.500000
	r105_kon 10.000000
	r106_koff 0.500000
	r107_kon 10.000000
	r108_koff 0.500000
	r109_kpon 0.000000
	r110_kpoff 0.050000
	r111_kpon 0.000000
	r112_kpoff 0.050000
	r113_kpon 0.000000
	r114_kpoff 0.050000
	r115_kpon 0.000000
	r116_kpoff 0.050000
	r117_kpon 0.000000
	r118_kpoff 0.050000
	r119_kpon 0.000000
	r120_kpoff 0.050000
	r121_kon 10.000000
	r122_koff 0.500000
	r123_kon 10.000000
	r124_koff 0.500000
	r125_kon 10.000000
	r126_koff 0.500000
	r127_kpon 0.000000
	r128_kpoff 0.050000
	r129_kpon 0.000000
	r130_kpoff 0.050000
	r131_kpon 0.000000
	r132_kpoff 0.050000
	r133_kpon 0.000000
	r134_kpoff 0.050000
	r135_kpon 0.000000
	r136_kpoff 0.050000
	r137_kpon 0.000000
	r138_kpoff 0.050000
	r139_kon 10.000000
	r140_koff 0.500000
	r141_kon 10.000000
	r142_koff 0.500000
	r143_kon 10.000000
	r144_koff 0.500000
	r145_kpon 0.000000
	r146_kpoff 0.050000
	r147_kpon 0.000000
	r148_kpoff 0.050000
	r149_kpon 0.000000
	r150_kpoff 0.050000
	r151_kpon 0.000000
	r152_kpoff 0.050000
	r153_kpon 0.000000
	r154_kpoff 0.050000
	r155_kpon 0.000000
	r156_kpoff 0.050000
	r157_kon 10.000000
	r158_koff 0.500000
	r159_kon 10.000000
	r160_koff 0.500000
	r161_kon 10.000000
	r162_koff 0.500000
	r163_kpon 0.000000
	r164_kpoff 0.050000
	r165_kpon 0.000000
	r166_kpoff 0.050000
	r167_kpon 0.000000
	r168_kpoff 0.050000
	r169_kpon 0.000000
	r170_kpoff 0.050000
	r171_kpon 0.000000
	r172_kpoff 0.050000
	r173_kpon 0.000000
	r174_kpoff 0.050000
	r175_kon 10.000000
	r176_koff 0.500000
	r177_kpon 0.000000
	r178_kpoff 0.050000
	r179_kon 10.000000
	r180_koff 0.500000
	r181_kpon 0.000000
	r182_kpoff 0.050000
	r183_kon 10.000000
	r184_koff 0.500000
	r185_kpon 0.000000
	r186_kpoff 0.050000
	r187_kon 10.000000
	r188_koff 0.500000
	r189_kpon 0.000000
	r190_kpoff 0.050000
	r191_kon 10.000000
	r192_koff 0.500000
	r193_kpon 0.000000
	r194_kpoff 0.050000
	r195_kon 10.000000
	r196_koff 0.500000
	r197_kpon 0.000000
	r198_kpoff 0.050000
	r199_kon 10.000000
	r200_koff 0.500000
	r201_kpon 0.000000
	r202_kpoff 0.050000
	r203_kon 10.000000
	r204_koff 0.500000
	r205_kpon 0.000000
	r206_kpoff 0.050000
	r207_kon 10.000000
	r208_koff 0.500000
	r209_kpon 0.000000
	r210_kpoff 0.050000
	r211_kon 10.000000
	r212_koff 0.500000
	r213_kpon 0.000000
	r214_kpoff 0.050000
	r215_kon 10.000000
	r216_koff 0.500000
	r217_kpon 0.000000
	r218_kpoff 0.050000
	r219_kon 10.000000
	r220_koff 0.500000
	r221_kpon 0.000000
	r222_kpoff 0.050000
	r223_kon 10.000000
	r224_koff 0.500000
	r225_kpon 0.000000
	r226_kpoff 0.050000
	r227_kon 10.000000
	r228_koff 0.500000
	r229_kpon 0.000000
	r230_kpoff 0.050000
	r231_kon 10.000000
	r232_koff 0.500000
	r233_kpon 0.000000
	r234_kpoff 0.050000
	r235_kon 10.000000
	r236_koff 0.500000
	r237_kpon 0.000000
	r238_kpoff 0.050000
	r239_k7 0.100000
	r240_k7 0.100000
	r241_k7 0.100000
	r242_k9a 0.100000
	r243_k9a 0.100000
	r244_k9a 0.100000
	r245_k3 0.100000
	r246_k5a 0.100000
	r247_k3 0.100000
	r248_k5a 0.100000
	r249_k3 0.100000
	r250_k5a 0.100000
	r251_k3 0.100000
	r252_k5a 0.100000
	r253_k1a 100.000000
	r254_d1a 0.000000
	r255_k1 0.100000
	r256_k1a 100.000000
	r257_d1a 0.000000
	r258_k1 0.100000
	r259_k1a 100.000000
	r260_d1a 0.000000
	r261_k1 0.100000
	r262_k1a 100.000000
	r263_d1a 0.000000
	r264_k1 0.100000
	r265_k1a 100.000000
	r266_d1a 0.000000
	r267_k1 0.100000
	r268_k1a 100.000000
	r269_d1a 0.000000
	r270_k1 0.100000
	r271_k1a 100.000000
	r272_d1a 0.000000
	r273_k1 0.100000
	r274_k1a 100.000000
	r275_d1a 0.000000
	r276_k1 0.100000
	r277_k1a 100.000000
	r278_d1a 0.000000
	r279_k1 0.100000
	r280_k1a 100.000000
	r281_d1a 0.000000
	r282_k1 0.100000
	r283_k1a 100.000000
	r284_d1a 0.000000
	r285_k1 0.100000
	r286_k1a 100.000000
	r287_d1a 0.000000
	r288_k1 0.100000
	r289_k1a 100.000000
	r290_d1a 0.000000
	r291_k1 0.100000
	r292_k1a 100.000000
	r293_d1a 0.000000
	r294_k1 0.100000
	r295_k1a 100.000000
	r296_d1a 0.000000
	r297_k1 0.100000
	r298_k1a 100.000000
	r299_d1a 0.000000
	r300_k1 0.100000
end parameters
begin molecule types
	Scaffold_MAPK_P_MEK_P_RAF()
	Scaffold_MAPK_MEK_RAF_S_RAFK_0_0_0()
	Scaffold_MAPK_PP_MEK_PP_RAF()
	Scaffold_MEK()
	MEK_PP()
	Scaffold_MAPK_PP_MEK_RAF_S_RAFK_2_0_0()
	Scaffold_MAPK_P_MEK_P_RAF_S_RAFK_1_1_0()
	Scaffold_MEK_RAF()
	MAPK_MEK_PP()
	MAPK_P_MEK_PP()
	Scaffold_MAPK_MEK_RAF_P()
	Scaffold_RAF_S_RAFK_m1_m1_0()
	Scaffold_MAPK_MEK_P_RAF_S_RAFK_0_1_0()
	RAF_P_RAFPase()
	Scaffold_MAPK_PP_MEK_RAF_P()
	Scaffold_RAF_P()
	Scaffold_MAPK_PP_MEK_P()
	MEKphosphatase()
	Scaffold_MAPK_PP_MEK_PP()
	RAFkinase()
	Scaffold_MAPK_PP_MEK_PP_RAF_S_RAFK_2_2_0()
	Scaffold_MAPK_MEK_P_RAF_P()
	Scaffold_MAPK_MEK_P()
	Scaffold_MAPK_P_RAF_S_RAFK_1_m1_0()
	Scaffold_MAPK_P_MEK_PP_RAF_P()
	Scaffold_MEK_RAF_S_RAFK_m1_0_0()
	Scaffold_MAPK_P_MEK_PP_RAF()
	Scaffold_MEK_PP_RAF_S_RAFK_m1_2_0()
	Scaffold_MAPK_PP_MEK()
	Scaffold_MAPK_P_RAF_P()
	Scaffold_MEK_PP_RAF()
	Scaffold_MAPK_RAF_S_RAFK_0_m1_0()
	RAF_P()
	MEK_P()
	Scaffold_MAPK_MEK_PP_RAF()
	Scaffold_MAPK_RAF_P()
	RAFphosphatase()
	MEK_P_MEKPase()
	RAF()
	Scaffold_MEK_P_RAF_P()
	Scaffold_MAPK_MEK_RAF()
	Scaffold_MAPK_PP()
	Scaffold_MAPK_PP_RAF_S_RAFK_2_m1_0()
	Scaffold_MEK_P_RAF()
	MAPK_P_MAPKPase()
	MEK_P_RAF_P()
	MEK_RAF_P()
	MEK()
	Scaffold_MAPK_P_MEK_RAF_S_RAFK_1_0_0()
	Scaffold_MEK_RAF_P()
	Scaffold_MEK_P()
	Scaffold_MAPK_P_MEK()
	Scaffold_MAPK_P_RAF()
	Scaffold_MAPK_P_MEK_RAF_P()
	Scaffold_MAPK_PP_MEK_P_RAF_P()
	Scaffold_MAPK_P_MEK_RAF()
	Scaffold_MAPK_PP_MEK_P_RAF()
	Scaffold()
	Scaffold_MAPK_MEK()
	Scaffold_MAPK_PP_RAF()
	Scaffold_MAPK_P_MEK_PP_RAF_S_RAFK_1_2_0()
	Scaffold_MAPK_MEK_PP_RAF_P()
	Scaffold_MAPK_MEK_P_RAF()
	Scaffold_MAPK_MEK_PP()
	Scaffold_MAPK_PP_MEK_PP_RAF_P()
	Scaffold_MAPK_P()
	MAPK_PP()
	Scaffold_MAPK_RAF()
	MAPKphosphatase()
	RAF_RAFK()
	Scaffold_MAPK()
	Scaffold_MEK_PP()
	Scaffold_MAPK_P_MEK_PP()
	Scaffold_MEK_P_RAF_S_RAFK_m1_1_0()
	Scaffold_MAPK_PP_MEK_P_RAF_S_RAFK_2_1_0()
	Scaffold_MAPK_P_MEK_P_RAF_P()
	Scaffold_MAPK_MEK_PP_RAF_S_RAFK_0_2_0()
	Scaffold_MAPK_PP_MEK_RAF()
	MAPK_PP_MAPKPase()
	MAPK()
	Scaffold_MAPK_P_MEK_P()
	Scaffold_MEK_PP_RAF_P()
	MAPK_P()
	MEK_PP_MEKPase()
	Scaffold_MAPK_PP_RAF_P()
	Scaffold_RAF()
end molecule types
begin seed species
	MAPKphosphatase() 0.3 #MAPKphosphatase #MAPKP
	MEKphosphatase() 0.2 #MEKphosphatase #MEKP
	RAFkinase() 0.1 #RAFkinase #RAFK
	RAFphosphatase() 0.3 #RAFphosphatase #RAFP
	MAPK() 0.4 #MAPK #K_1_0
	MEK() 0.2 #MEK #K_2_0
	RAF() 0.3 #RAF #K_3_0
	Scaffold() 0.1 #Scaffold #S_m1_m1_m1
end seed species
begin observables
	Species MAPKphosphatase MAPKphosphatase() #MAPK phosphatase
	Species MEKphosphatase MEKphosphatase() #MEK phosphatase
	Species RAFkinase RAFkinase() #RAF kinase
	Species RAFphosphatase RAFphosphatase() #RAF phosphatase
	Species MAPK MAPK() #MAPK
	Species MAPK_P MAPK_P() #MAPK-P
	Species MAPK_PP MAPK_PP() #MAPK-PP
	Species MEK MEK() #MEK
	Species MEK_P MEK_P() #MEK-P
	Species MEK_PP MEK_PP() #MEK-PP
	Species RAF RAF() #RAF
	Species RAF_P RAF_P() #RAF-P
	Species MAPK_MEK_PP MAPK_MEK_PP() #MAPK_MEK-PP
	Species MAPK_P_MEK_PP MAPK_P_MEK_PP() #MAPK-P_MEK-PP
	Species MEK_RAF_P MEK_RAF_P() #MEK_RAF-P
	Species MEK_P_RAF_P MEK_P_RAF_P() #MEK-P_RAF-P
	Species MAPK_P_MAPKPase MAPK_P_MAPKPase() #MAPK-P_MAPKPase
	Species MAPK_PP_MAPKPase MAPK_PP_MAPKPase() #MAPK-PP_MAPKPase
	Species MEK_P_MEKPase MEK_P_MEKPase() #MEK-P_MEKPase
	Species MEK_PP_MEKPase MEK_PP_MEKPase() #MEK-PP_MEKPase
	Species RAF_RAFK RAF_RAFK() #RAF_RAFK
	Species RAF_P_RAFPase RAF_P_RAFPase() #RAF-P_RAFPase
	Species Scaffold Scaffold() #Scaffold
	Species Scaffold_RAF Scaffold_RAF() #Scaffold_RAF
	Species Scaffold_RAF_P Scaffold_RAF_P() #Scaffold_RAF-P
	Species Scaffold_MEK Scaffold_MEK() #Scaffold_MEK
	Species Scaffold_MEK_RAF Scaffold_MEK_RAF() #Scaffold_MEK_RAF
	Species Scaffold_MEK_RAF_P Scaffold_MEK_RAF_P() #Scaffold_MEK_RAF-P
	Species Scaffold_MEK_P Scaffold_MEK_P() #Scaffold_MEK-P
	Species Scaffold_MEK_P_RAF Scaffold_MEK_P_RAF() #Scaffold_MEK-P_RAF
	Species Scaffold_MEK_P_RAF_P Scaffold_MEK_P_RAF_P() #Scaffold_MEK-P_RAF-P
	Species Scaffold_MEK_PP Scaffold_MEK_PP() #Scaffold_MEK-PP
	Species Scaffold_MEK_PP_RAF Scaffold_MEK_PP_RAF() #Scaffold_MEK-PP_RAF
	Species Scaffold_MEK_PP_RAF_P Scaffold_MEK_PP_RAF_P() #Scaffold_MEK-PP_RAF-P
	Species Scaffold_MAPK Scaffold_MAPK() #Scaffold_MAPK
	Species Scaffold_MAPK_RAF Scaffold_MAPK_RAF() #Scaffold_MAPK_RAF
	Species Scaffold_MAPK_RAF_P Scaffold_MAPK_RAF_P() #Scaffold_MAPK_RAF-P
	Species Scaffold_MAPK_MEK Scaffold_MAPK_MEK() #Scaffold_MAPK_MEK
	Species Scaffold_MAPK_MEK_RAF Scaffold_MAPK_MEK_RAF() #Scaffold_MAPK_MEK_RAF
	Species Scaffold_MAPK_MEK_RAF_P Scaffold_MAPK_MEK_RAF_P() #Scaffold_MAPK_MEK_RAF-P
	Species Scaffold_MAPK_MEK_P Scaffold_MAPK_MEK_P() #Scaffold_MAPK_MEK-P
	Species Scaffold_MAPK_MEK_P_RAF Scaffold_MAPK_MEK_P_RAF() #Scaffold_MAPK_MEK-P_RAF
	Species Scaffold_MAPK_MEK_P_RAF_P Scaffold_MAPK_MEK_P_RAF_P() #Scaffold_MAPK_MEK-P_RAF-P
	Species Scaffold_MAPK_MEK_PP Scaffold_MAPK_MEK_PP() #Scaffold_MAPK_MEK-PP
	Species Scaffold_MAPK_MEK_PP_RAF Scaffold_MAPK_MEK_PP_RAF() #Scaffold_MAPK_MEK-PP_RAF
	Species Scaffold_MAPK_MEK_PP_RAF_P Scaffold_MAPK_MEK_PP_RAF_P() #Scaffold_MAPK_MEK-PP_RAF-P
	Species Scaffold_MAPK_P Scaffold_MAPK_P() #Scaffold_MAPK-P
	Species Scaffold_MAPK_P_RAF Scaffold_MAPK_P_RAF() #Scaffold_MAPK-P_RAF
	Species Scaffold_MAPK_P_RAF_P Scaffold_MAPK_P_RAF_P() #Scaffold_MAPK-P_RAF-P
	Species Scaffold_MAPK_P_MEK Scaffold_MAPK_P_MEK() #Scaffold_MAPK-P_MEK
	Species Scaffold_MAPK_P_MEK_RAF Scaffold_MAPK_P_MEK_RAF() #Scaffold_MAPK-P_MEK_RAF
	Species Scaffold_MAPK_P_MEK_RAF_P Scaffold_MAPK_P_MEK_RAF_P() #Scaffold_MAPK-P_MEK_RAF-P
	Species Scaffold_MAPK_P_MEK_P Scaffold_MAPK_P_MEK_P() #Scaffold_MAPK-P_MEK-P
	Species Scaffold_MAPK_P_MEK_P_RAF Scaffold_MAPK_P_MEK_P_RAF() #Scaffold_MAPK-P_MEK-P_RAF
	Species Scaffold_MAPK_P_MEK_P_RAF_P Scaffold_MAPK_P_MEK_P_RAF_P() #Scaffold_MAPK-P_MEK-P_RAF-P
	Species Scaffold_MAPK_P_MEK_PP Scaffold_MAPK_P_MEK_PP() #Scaffold_MAPK-P_MEK-PP
	Species Scaffold_MAPK_P_MEK_PP_RAF Scaffold_MAPK_P_MEK_PP_RAF() #Scaffold_MAPK-P_MEK-PP_RAF
	Species Scaffold_MAPK_P_MEK_PP_RAF_P Scaffold_MAPK_P_MEK_PP_RAF_P() #Scaffold_MAPK-P_MEK-PP_RAF-P
	Species Scaffold_MAPK_PP Scaffold_MAPK_PP() #Scaffold_MAPK-PP
	Species Scaffold_MAPK_PP_RAF Scaffold_MAPK_PP_RAF() #Scaffold_MAPK-PP_RAF
	Species Scaffold_MAPK_PP_RAF_P Scaffold_MAPK_PP_RAF_P() #Scaffold_MAPK-PP_RAF-P
	Species Scaffold_MAPK_PP_MEK Scaffold_MAPK_PP_MEK() #Scaffold_MAPK-PP_MEK
	Species Scaffold_MAPK_PP_MEK_RAF Scaffold_MAPK_PP_MEK_RAF() #Scaffold_MAPK-PP_MEK_RAF
	Species Scaffold_MAPK_PP_MEK_RAF_P Scaffold_MAPK_PP_MEK_RAF_P() #Scaffold_MAPK-PP_MEK_RAF-P
	Species Scaffold_MAPK_PP_MEK_P Scaffold_MAPK_PP_MEK_P() #Scaffold_MAPK-PP_MEK-P
	Species Scaffold_MAPK_PP_MEK_P_RAF Scaffold_MAPK_PP_MEK_P_RAF() #Scaffold_MAPK-PP_MEK-P_RAF
	Species Scaffold_MAPK_PP_MEK_P_RAF_P Scaffold_MAPK_PP_MEK_P_RAF_P() #Scaffold_MAPK-PP_MEK-P_RAF-P
	Species Scaffold_MAPK_PP_MEK_PP Scaffold_MAPK_PP_MEK_PP() #Scaffold_MAPK-PP_MEK-PP
	Species Scaffold_MAPK_PP_MEK_PP_RAF Scaffold_MAPK_PP_MEK_PP_RAF() #Scaffold_MAPK-PP_MEK-PP_RAF
	Species Scaffold_MAPK_PP_MEK_PP_RAF_P Scaffold_MAPK_PP_MEK_PP_RAF_P() #Scaffold_MAPK-PP_MEK-PP_RAF-P
	Species Scaffold_RAF_S_RAFK_m1_m1_0 Scaffold_RAF_S_RAFK_m1_m1_0() #Scaffold_RAF
	Species Scaffold_MEK_RAF_S_RAFK_m1_0_0 Scaffold_MEK_RAF_S_RAFK_m1_0_0() #Scaffold_MEK_RAF
	Species Scaffold_MEK_P_RAF_S_RAFK_m1_1_0 Scaffold_MEK_P_RAF_S_RAFK_m1_1_0() #Scaffold_MEK-P_RAF
	Species Scaffold_MEK_PP_RAF_S_RAFK_m1_2_0 Scaffold_MEK_PP_RAF_S_RAFK_m1_2_0() #Scaffold_MEK-PP_RAF
	Species Scaffold_MAPK_RAF_S_RAFK_0_m1_0 Scaffold_MAPK_RAF_S_RAFK_0_m1_0() #Scaffold_MAPK_RAF
	Species Scaffold_MAPK_MEK_RAF_S_RAFK_0_0_0 Scaffold_MAPK_MEK_RAF_S_RAFK_0_0_0() #Scaffold_MAPK_MEK_RAF
	Species Scaffold_MAPK_MEK_P_RAF_S_RAFK_0_1_0 Scaffold_MAPK_MEK_P_RAF_S_RAFK_0_1_0() #Scaffold_MAPK_MEK-P_RAF
	Species Scaffold_MAPK_MEK_PP_RAF_S_RAFK_0_2_0 Scaffold_MAPK_MEK_PP_RAF_S_RAFK_0_2_0() #Scaffold_MAPK_MEK-PP_RAF
	Species Scaffold_MAPK_P_RAF_S_RAFK_1_m1_0 Scaffold_MAPK_P_RAF_S_RAFK_1_m1_0() #Scaffold_MAPK-P_RAF
	Species Scaffold_MAPK_P_MEK_RAF_S_RAFK_1_0_0 Scaffold_MAPK_P_MEK_RAF_S_RAFK_1_0_0() #Scaffold_MAPK-P_MEK_RAF
	Species Scaffold_MAPK_P_MEK_P_RAF_S_RAFK_1_1_0 Scaffold_MAPK_P_MEK_P_RAF_S_RAFK_1_1_0() #Scaffold_MAPK-P_MEK-P_RAF
	Species Scaffold_MAPK_P_MEK_PP_RAF_S_RAFK_1_2_0 Scaffold_MAPK_P_MEK_PP_RAF_S_RAFK_1_2_0() #Scaffold_MAPK-P_MEK-PP_RAF
	Species Scaffold_MAPK_PP_RAF_S_RAFK_2_m1_0 Scaffold_MAPK_PP_RAF_S_RAFK_2_m1_0() #Scaffold_MAPK-PP_RAF
	Species Scaffold_MAPK_PP_MEK_RAF_S_RAFK_2_0_0 Scaffold_MAPK_PP_MEK_RAF_S_RAFK_2_0_0() #Scaffold_MAPK-PP_MEK_RAF
	Species Scaffold_MAPK_PP_MEK_P_RAF_S_RAFK_2_1_0 Scaffold_MAPK_PP_MEK_P_RAF_S_RAFK_2_1_0() #Scaffold_MAPK-PP_MEK-P_RAF
	Species Scaffold_MAPK_PP_MEK_PP_RAF_S_RAFK_2_2_0 Scaffold_MAPK_PP_MEK_PP_RAF_S_RAFK_2_2_0() #Scaffold_MAPK-PP_MEK-PP_RAF
end observables
begin reaction rules
	Reaction1: RAFkinase() + RAF() -> RAF_RAFK() r1_a1
	Reaction2: RAF_RAFK() -> RAFkinase() + RAF() r2_d1
	Reaction3: RAF_RAFK() -> RAFkinase() + RAF_P() r3_k1
	Reaction4: RAFphosphatase() + RAF_P() -> RAF_P_RAFPase() r4_a2
	Reaction5: RAF_P_RAFPase() -> RAFphosphatase() + RAF_P() r5_d2
	Reaction6: RAF_P_RAFPase() -> RAFphosphatase() + RAF() r6_k2
	Reaction7: MEK() + RAF_P() -> MEK_RAF_P() r7_a3
	Reaction8: MEK_RAF_P() -> MEK() + RAF_P() r8_d3
	Reaction9: MEK_RAF_P() -> MEK_P() + RAF_P() r9_k3
	Reaction10: MEKphosphatase() + MEK_P() -> MEK_P_MEKPase() r10_a4
	Reaction11: MEK_P_MEKPase() -> MEKphosphatase() + MEK_P() r11_d4
	Reaction12: MEK_P_MEKPase() -> MEKphosphatase() + MEK() r12_k4
	Reaction13: MEK_P() + RAF_P() -> MEK_P_RAF_P() r13_a5
	Reaction14: MEK_P_RAF_P() -> MEK_P() + RAF_P() r14_d5
	Reaction15: MEK_P_RAF_P() -> MEK_PP() + RAF_P() r15_k5
	Reaction16: MEKphosphatase() + MEK_PP() -> MEK_PP_MEKPase() r16_a6
	Reaction17: MEK_PP_MEKPase() -> MEKphosphatase() + MEK_PP() r17_d6
	Reaction18: MEK_PP_MEKPase() -> MEKphosphatase() + MEK_P() r18_k6
	Reaction19: MAPK() + MEK_PP() -> MAPK_MEK_PP() r19_a7
	Reaction20: MAPK_MEK_PP() -> MAPK() + MEK_PP() r20_d7
	Reaction21: MAPK_MEK_PP() -> MAPK_P() + MEK_PP() r21_k7
	Reaction22: MAPKphosphatase() + MAPK_P() -> MAPK_P_MAPKPase() r22_a8
	Reaction23: MAPK_P_MAPKPase() -> MAPKphosphatase() + MAPK_P() r23_d8
	Reaction24: MAPK_P_MAPKPase() -> MAPKphosphatase() + MAPK() r24_k8
	Reaction25: MAPK_P() + MEK_PP() -> MAPK_P_MEK_PP() r25_a9
	Reaction26: MAPK_P_MEK_PP() -> MAPK_P() + MEK_PP() r26_d9
	Reaction27: MAPK_P_MEK_PP() -> MAPK_PP() + MEK_PP() r27_k9
	Reaction28: MAPKphosphatase() + MAPK_PP() -> MAPK_PP_MAPKPase() r28_a10
	Reaction29: MAPK_PP_MAPKPase() -> MAPKphosphatase() + MAPK_PP() r29_d10
	Reaction30: MAPK_PP_MAPKPase() -> MAPKphosphatase() + MAPK_P() r30_k10
	Reaction31: MAPK() + Scaffold() -> Scaffold_MAPK() r31_kon
	Reaction32: Scaffold_MAPK() -> MAPK() + Scaffold() r32_koff
	Reaction33: MAPK() + Scaffold_RAF() -> Scaffold_MAPK_RAF() r33_kon
	Reaction34: Scaffold_MAPK_RAF() -> MAPK() + Scaffold_RAF() r34_koff
	Reaction35: MAPK() + Scaffold_RAF_P() -> Scaffold_MAPK_RAF_P() r35_kon
	Reaction36: Scaffold_MAPK_RAF_P() -> MAPK() + Scaffold_RAF_P() r36_koff
	Reaction37: MAPK() + Scaffold_MEK() -> Scaffold_MAPK_MEK() r37_kon
	Reaction38: Scaffold_MAPK_MEK() -> MAPK() + Scaffold_MEK() r38_koff
	Reaction39: MAPK() + Scaffold_MEK_RAF() -> Scaffold_MAPK_MEK_RAF() r39_kon
	Reaction40: Scaffold_MAPK_MEK_RAF() -> MAPK() + Scaffold_MEK_RAF() r40_koff
	Reaction41: MAPK() + Scaffold_MEK_RAF_P() -> Scaffold_MAPK_MEK_RAF_P() r41_kon
	Reaction42: Scaffold_MAPK_MEK_RAF_P() -> MAPK() + Scaffold_MEK_RAF_P() r42_koff
	Reaction43: MAPK() + Scaffold_MEK_P() -> Scaffold_MAPK_MEK_P() r43_kon
	Reaction44: Scaffold_MAPK_MEK_P() -> MAPK() + Scaffold_MEK_P() r44_koff
	Reaction45: MAPK() + Scaffold_MEK_P_RAF() -> Scaffold_MAPK_MEK_P_RAF() r45_kon
	Reaction46: Scaffold_MAPK_MEK_P_RAF() -> MAPK() + Scaffold_MEK_P_RAF() r46_koff
	Reaction47: MAPK() + Scaffold_MEK_P_RAF_P() -> Scaffold_MAPK_MEK_P_RAF_P() r47_kon
	Reaction48: Scaffold_MAPK_MEK_P_RAF_P() -> MAPK() + Scaffold_MEK_P_RAF_P() r48_koff
	Reaction49: MAPK() + Scaffold_MEK_PP() -> Scaffold_MAPK_MEK_PP() r49_kon
	Reaction50: Scaffold_MAPK_MEK_PP() -> MAPK() + Scaffold_MEK_PP() r50_koff
	Reaction51: MAPK() + Scaffold_MEK_PP_RAF() -> Scaffold_MAPK_MEK_PP_RAF() r51_kon
	Reaction52: Scaffold_MAPK_MEK_PP_RAF() -> MAPK() + Scaffold_MEK_PP_RAF() r52_koff
	Reaction53: MAPK() + Scaffold_MEK_PP_RAF_P() -> Scaffold_MAPK_MEK_PP_RAF_P() r53_kon
	Reaction54: Scaffold_MAPK_MEK_PP_RAF_P() -> MAPK() + Scaffold_MEK_PP_RAF_P() r54_koff
	Reaction55: MAPK_P() + Scaffold() -> Scaffold_MAPK_P() r55_kpon
	Reaction56: Scaffold_MAPK_P() -> MAPK_P() + Scaffold() r56_kpoff
	Reaction57: MAPK_P() + Scaffold_RAF() -> Scaffold_MAPK_P_RAF() r57_kpon
	Reaction58: Scaffold_MAPK_P_RAF() -> MAPK_P() + Scaffold_RAF() r58_kpoff
	Reaction59: MAPK_P() + Scaffold_RAF_P() -> Scaffold_MAPK_P_RAF_P() r59_kpon
	Reaction60: Scaffold_MAPK_P_RAF_P() -> MAPK_P() + Scaffold_RAF_P() r60_kpoff
	Reaction61: MAPK_P() + Scaffold_MEK() -> Scaffold_MAPK_P_MEK() r61_kpon
	Reaction62: Scaffold_MAPK_P_MEK() -> MAPK_P() + Scaffold_MEK() r62_kpoff
	Reaction63: MAPK_P() + Scaffold_MEK_RAF() -> Scaffold_MAPK_P_MEK_RAF() r63_kpon
	Reaction64: Scaffold_MAPK_P_MEK_RAF() -> MAPK_P() + Scaffold_MEK_RAF() r64_kpoff
	Reaction65: MAPK_P() + Scaffold_MEK_RAF_P() -> Scaffold_MAPK_P_MEK_RAF_P() r65_kpon
	Reaction66: Scaffold_MAPK_P_MEK_RAF_P() -> MAPK_P() + Scaffold_MEK_RAF_P() r66_kpoff
	Reaction67: MAPK_P() + Scaffold_MEK_P() -> Scaffold_MAPK_P_MEK_P() r67_kpon
	Reaction68: Scaffold_MAPK_P_MEK_P() -> MAPK_P() + Scaffold_MEK_P() r68_kpoff
	Reaction69: MAPK_P() + Scaffold_MEK_P_RAF() -> Scaffold_MAPK_P_MEK_P_RAF() r69_kpon
	Reaction70: Scaffold_MAPK_P_MEK_P_RAF() -> MAPK_P() + Scaffold_MEK_P_RAF() r70_kpoff
	Reaction71: MAPK_P() + Scaffold_MEK_P_RAF_P() -> Scaffold_MAPK_P_MEK_P_RAF_P() r71_kpon
	Reaction72: Scaffold_MAPK_P_MEK_P_RAF_P() -> MAPK_P() + Scaffold_MEK_P_RAF_P() r72_kpoff
	Reaction73: MAPK_P() + Scaffold_MEK_PP() -> Scaffold_MAPK_P_MEK_PP() r73_kpon
	Reaction74: Scaffold_MAPK_P_MEK_PP() -> MAPK_P() + Scaffold_MEK_PP() r74_kpoff
	Reaction75: MAPK_P() + Scaffold_MEK_PP_RAF() -> Scaffold_MAPK_P_MEK_PP_RAF() r75_kpon
	Reaction76: Scaffold_MAPK_P_MEK_PP_RAF() -> MAPK_P() + Scaffold_MEK_PP_RAF() r76_kpoff
	Reaction77: MAPK_P() + Scaffold_MEK_PP_RAF_P() -> Scaffold_MAPK_P_MEK_PP_RAF_P() r77_kpon
	Reaction78: Scaffold_MAPK_P_MEK_PP_RAF_P() -> MAPK_P() + Scaffold_MEK_PP_RAF_P() r78_kpoff
	Reaction79: MAPK_PP() + Scaffold() -> Scaffold_MAPK_PP() r79_kpon
	Reaction80: Scaffold_MAPK_PP() -> MAPK_PP() + Scaffold() r80_kpoff
	Reaction81: MAPK_PP() + Scaffold_RAF() -> Scaffold_MAPK_PP_RAF() r81_kpon
	Reaction82: Scaffold_MAPK_PP_RAF() -> MAPK_PP() + Scaffold_RAF() r82_kpoff
	Reaction83: MAPK_PP() + Scaffold_RAF_P() -> Scaffold_MAPK_PP_RAF_P() r83_kpon
	Reaction84: Scaffold_MAPK_PP_RAF_P() -> MAPK_PP() + Scaffold_RAF_P() r84_kpoff
	Reaction85: MAPK_PP() + Scaffold_MEK() -> Scaffold_MAPK_PP_MEK() r85_kpon
	Reaction86: Scaffold_MAPK_PP_MEK() -> MAPK_PP() + Scaffold_MEK() r86_kpoff
	Reaction87: MAPK_PP() + Scaffold_MEK_RAF() -> Scaffold_MAPK_PP_MEK_RAF() r87_kpon
	Reaction88: Scaffold_MAPK_PP_MEK_RAF() -> MAPK_PP() + Scaffold_MEK_RAF() r88_kpoff
	Reaction89: MAPK_PP() + Scaffold_MEK_RAF_P() -> Scaffold_MAPK_PP_MEK_RAF_P() r89_kpon
	Reaction90: Scaffold_MAPK_PP_MEK_RAF_P() -> MAPK_PP() + Scaffold_MEK_RAF_P() r90_kpoff
	Reaction91: MAPK_PP() + Scaffold_MEK_P() -> Scaffold_MAPK_PP_MEK_P() r91_kpon
	Reaction92: Scaffold_MAPK_PP_MEK_P() -> MAPK_PP() + Scaffold_MEK_P() r92_kpoff
	Reaction93: MAPK_PP() + Scaffold_MEK_P_RAF() -> Scaffold_MAPK_PP_MEK_P_RAF() r93_kpon
	Reaction94: Scaffold_MAPK_PP_MEK_P_RAF() -> MAPK_PP() + Scaffold_MEK_P_RAF() r94_kpoff
	Reaction95: MAPK_PP() + Scaffold_MEK_P_RAF_P() -> Scaffold_MAPK_PP_MEK_P_RAF_P() r95_kpon
	Reaction96: Scaffold_MAPK_PP_MEK_P_RAF_P() -> MAPK_PP() + Scaffold_MEK_P_RAF_P() r96_kpoff
	Reaction97: MAPK_PP() + Scaffold_MEK_PP() -> Scaffold_MAPK_PP_MEK_PP() r97_kpon
	Reaction98: Scaffold_MAPK_PP_MEK_PP() -> MAPK_PP() + Scaffold_MEK_PP() r98_kpoff
	Reaction99: MAPK_PP() + Scaffold_MEK_PP_RAF() -> Scaffold_MAPK_PP_MEK_PP_RAF() r99_kpon
	Reaction100: Scaffold_MAPK_PP_MEK_PP_RAF() -> MAPK_PP() + Scaffold_MEK_PP_RAF() r100_kpoff
	Reaction101: MAPK_PP() + Scaffold_MEK_PP_RAF_P() -> Scaffold_MAPK_PP_MEK_PP_RAF_P() r101_kpon
	Reaction102: Scaffold_MAPK_PP_MEK_PP_RAF_P() -> MAPK_PP() + Scaffold_MEK_PP_RAF_P() r102_kpoff
	Reaction103: MEK() + Scaffold() -> Scaffold_MEK() r103_kon
	Reaction104: Scaffold_MEK() -> MEK() + Scaffold() r104_koff
	Reaction105: MEK() + Scaffold_RAF() -> Scaffold_MEK_RAF() r105_kon
	Reaction106: Scaffold_MEK_RAF() -> MEK() + Scaffold_RAF() r106_koff
	Reaction107: MEK() + Scaffold_RAF_P() -> Scaffold_MEK_RAF_P() r107_kon
	Reaction108: Scaffold_MEK_RAF_P() -> MEK() + Scaffold_RAF_P() r108_koff
	Reaction109: MEK_P() + Scaffold() -> Scaffold_MEK_P() r109_kpon
	Reaction110: Scaffold_MEK_P() -> MEK_P() + Scaffold() r110_kpoff
	Reaction111: MEK_P() + Scaffold_RAF() -> Scaffold_MEK_P_RAF() r111_kpon
	Reaction112: Scaffold_MEK_P_RAF() -> MEK_P() + Scaffold_RAF() r112_kpoff
	Reaction113: MEK_P() + Scaffold_RAF_P() -> Scaffold_MEK_P_RAF_P() r113_kpon
	Reaction114: Scaffold_MEK_P_RAF_P() -> MEK_P() + Scaffold_RAF_P() r114_kpoff
	Reaction115: MEK_PP() + Scaffold() -> Scaffold_MEK_PP() r115_kpon
	Reaction116: Scaffold_MEK_PP() -> MEK_PP() + Scaffold() r116_kpoff
	Reaction117: MEK_PP() + Scaffold_RAF() -> Scaffold_MEK_PP_RAF() r117_kpon
	Reaction118: Scaffold_MEK_PP_RAF() -> MEK_PP() + Scaffold_RAF() r118_kpoff
	Reaction119: MEK_PP() + Scaffold_RAF_P() -> Scaffold_MEK_PP_RAF_P() r119_kpon
	Reaction120: Scaffold_MEK_PP_RAF_P() -> MEK_PP() + Scaffold_RAF_P() r120_kpoff
	Reaction121: MEK() + Scaffold_MAPK() -> Scaffold_MAPK_MEK() r121_kon
	Reaction122: Scaffold_MAPK_MEK() -> MEK() + Scaffold_MAPK() r122_koff
	Reaction123: MEK() + Scaffold_MAPK_RAF() -> Scaffold_MAPK_MEK_RAF() r123_kon
	Reaction124: Scaffold_MAPK_MEK_RAF() -> MEK() + Scaffold_MAPK_RAF() r124_koff
	Reaction125: MEK() + Scaffold_MAPK_RAF_P() -> Scaffold_MAPK_MEK_RAF_P() r125_kon
	Reaction126: Scaffold_MAPK_MEK_RAF_P() -> MEK() + Scaffold_MAPK_RAF_P() r126_koff
	Reaction127: MEK_P() + Scaffold_MAPK() -> Scaffold_MAPK_MEK_P() r127_kpon
	Reaction128: Scaffold_MAPK_MEK_P() -> MEK_P() + Scaffold_MAPK() r128_kpoff
	Reaction129: MEK_P() + Scaffold_MAPK_RAF() -> Scaffold_MAPK_MEK_P_RAF() r129_kpon
	Reaction130: Scaffold_MAPK_MEK_P_RAF() -> MEK_P() + Scaffold_MAPK_RAF() r130_kpoff
	Reaction131: MEK_P() + Scaffold_MAPK_RAF_P() -> Scaffold_MAPK_MEK_P_RAF_P() r131_kpon
	Reaction132: Scaffold_MAPK_MEK_P_RAF_P() -> MEK_P() + Scaffold_MAPK_RAF_P() r132_kpoff
	Reaction133: MEK_PP() + Scaffold_MAPK() -> Scaffold_MAPK_MEK_PP() r133_kpon
	Reaction134: Scaffold_MAPK_MEK_PP() -> MEK_PP() + Scaffold_MAPK() r134_kpoff
	Reaction135: MEK_PP() + Scaffold_MAPK_RAF() -> Scaffold_MAPK_MEK_PP_RAF() r135_kpon
	Reaction136: Scaffold_MAPK_MEK_PP_RAF() -> MEK_PP() + Scaffold_MAPK_RAF() r136_kpoff
	Reaction137: MEK_PP() + Scaffold_MAPK_RAF_P() -> Scaffold_MAPK_MEK_PP_RAF_P() r137_kpon
	Reaction138: Scaffold_MAPK_MEK_PP_RAF_P() -> MEK_PP() + Scaffold_MAPK_RAF_P() r138_kpoff
	Reaction139: MEK() + Scaffold_MAPK_P() -> Scaffold_MAPK_P_MEK() r139_kon
	Reaction140: Scaffold_MAPK_P_MEK() -> MEK() + Scaffold_MAPK_P() r140_koff
	Reaction141: MEK() + Scaffold_MAPK_P_RAF() -> Scaffold_MAPK_P_MEK_RAF() r141_kon
	Reaction142: Scaffold_MAPK_P_MEK_RAF() -> MEK() + Scaffold_MAPK_P_RAF() r142_koff
	Reaction143: MEK() + Scaffold_MAPK_P_RAF_P() -> Scaffold_MAPK_P_MEK_RAF_P() r143_kon
	Reaction144: Scaffold_MAPK_P_MEK_RAF_P() -> MEK() + Scaffold_MAPK_P_RAF_P() r144_koff
	Reaction145: MEK_P() + Scaffold_MAPK_P() -> Scaffold_MAPK_P_MEK_P() r145_kpon
	Reaction146: Scaffold_MAPK_P_MEK_P() -> MEK_P() + Scaffold_MAPK_P() r146_kpoff
	Reaction147: MEK_P() + Scaffold_MAPK_P_RAF() -> Scaffold_MAPK_P_MEK_P_RAF() r147_kpon
	Reaction148: Scaffold_MAPK_P_MEK_P_RAF() -> MEK_P() + Scaffold_MAPK_P_RAF() r148_kpoff
	Reaction149: MEK_P() + Scaffold_MAPK_P_RAF_P() -> Scaffold_MAPK_P_MEK_P_RAF_P() r149_kpon
	Reaction150: Scaffold_MAPK_P_MEK_P_RAF_P() -> MEK_P() + Scaffold_MAPK_P_RAF_P() r150_kpoff
	Reaction151: MEK_PP() + Scaffold_MAPK_P() -> Scaffold_MAPK_P_MEK_PP() r151_kpon
	Reaction152: Scaffold_MAPK_P_MEK_PP() -> MEK_PP() + Scaffold_MAPK_P() r152_kpoff
	Reaction153: MEK_PP() + Scaffold_MAPK_P_RAF() -> Scaffold_MAPK_P_MEK_PP_RAF() r153_kpon
	Reaction154: Scaffold_MAPK_P_MEK_PP_RAF() -> MEK_PP() + Scaffold_MAPK_P_RAF() r154_kpoff
	Reaction155: MEK_PP() + Scaffold_MAPK_P_RAF_P() -> Scaffold_MAPK_P_MEK_PP_RAF_P() r155_kpon
	Reaction156: Scaffold_MAPK_P_MEK_PP_RAF_P() -> MEK_PP() + Scaffold_MAPK_P_RAF_P() r156_kpoff
	Reaction157: MEK() + Scaffold_MAPK_PP() -> Scaffold_MAPK_PP_MEK() r157_kon
	Reaction158: Scaffold_MAPK_PP_MEK() -> MEK() + Scaffold_MAPK_PP() r158_koff
	Reaction159: MEK() + Scaffold_MAPK_PP_RAF() -> Scaffold_MAPK_PP_MEK_RAF() r159_kon
	Reaction160: Scaffold_MAPK_PP_MEK_RAF() -> MEK() + Scaffold_MAPK_PP_RAF() r160_koff
	Reaction161: MEK() + Scaffold_MAPK_PP_RAF_P() -> Scaffold_MAPK_PP_MEK_RAF_P() r161_kon
	Reaction162: Scaffold_MAPK_PP_MEK_RAF_P() -> MEK() + Scaffold_MAPK_PP_RAF_P() r162_koff
	Reaction163: MEK_P() + Scaffold_MAPK_PP() -> Scaffold_MAPK_PP_MEK_P() r163_kpon
	Reaction164: Scaffold_MAPK_PP_MEK_P() -> MEK_P() + Scaffold_MAPK_PP() r164_kpoff
	Reaction165: MEK_P() + Scaffold_MAPK_PP_RAF() -> Scaffold_MAPK_PP_MEK_P_RAF() r165_kpon
	Reaction166: Scaffold_MAPK_PP_MEK_P_RAF() -> MEK_P() + Scaffold_MAPK_PP_RAF() r166_kpoff
	Reaction167: MEK_P() + Scaffold_MAPK_PP_RAF_P() -> Scaffold_MAPK_PP_MEK_P_RAF_P() r167_kpon
	Reaction168: Scaffold_MAPK_PP_MEK_P_RAF_P() -> MEK_P() + Scaffold_MAPK_PP_RAF_P() r168_kpoff
	Reaction169: MEK_PP() + Scaffold_MAPK_PP() -> Scaffold_MAPK_PP_MEK_PP() r169_kpon
	Reaction170: Scaffold_MAPK_PP_MEK_PP() -> MEK_PP() + Scaffold_MAPK_PP() r170_kpoff
	Reaction171: MEK_PP() + Scaffold_MAPK_PP_RAF() -> Scaffold_MAPK_PP_MEK_PP_RAF() r171_kpon
	Reaction172: Scaffold_MAPK_PP_MEK_PP_RAF() -> MEK_PP() + Scaffold_MAPK_PP_RAF() r172_kpoff
	Reaction173: MEK_PP() + Scaffold_MAPK_PP_RAF_P() -> Scaffold_MAPK_PP_MEK_PP_RAF_P() r173_kpon
	Reaction174: Scaffold_MAPK_PP_MEK_PP_RAF_P() -> MEK_PP() + Scaffold_MAPK_PP_RAF_P() r174_kpoff
	Reaction175: RAF() + Scaffold() -> Scaffold_RAF() r175_kon
	Reaction176: Scaffold_RAF() -> RAF() + Scaffold() r176_koff
	Reaction177: RAF_P() + Scaffold() -> Scaffold_RAF_P() r177_kpon
	Reaction178: Scaffold_RAF_P() -> RAF_P() + Scaffold() r178_kpoff
	Reaction179: RAF() + Scaffold_MEK() -> Scaffold_MEK_RAF() r179_kon
	Reaction180: Scaffold_MEK_RAF() -> RAF() + Scaffold_MEK() r180_koff
	Reaction181: RAF_P() + Scaffold_MEK() -> Scaffold_MEK_RAF_P() r181_kpon
	Reaction182: Scaffold_MEK_RAF_P() -> RAF_P() + Scaffold_MEK() r182_kpoff
	Reaction183: RAF() + Scaffold_MEK_P() -> Scaffold_MEK_P_RAF() r183_kon
	Reaction184: Scaffold_MEK_P_RAF() -> RAF() + Scaffold_MEK_P() r184_koff
	Reaction185: RAF_P() + Scaffold_MEK_P() -> Scaffold_MEK_P_RAF_P() r185_kpon
	Reaction186: Scaffold_MEK_P_RAF_P() -> RAF_P() + Scaffold_MEK_P() r186_kpoff
	Reaction187: RAF() + Scaffold_MEK_PP() -> Scaffold_MEK_PP_RAF() r187_kon
	Reaction188: Scaffold_MEK_PP_RAF() -> RAF() + Scaffold_MEK_PP() r188_koff
	Reaction189: RAF_P() + Scaffold_MEK_PP() -> Scaffold_MEK_PP_RAF_P() r189_kpon
	Reaction190: Scaffold_MEK_PP_RAF_P() -> RAF_P() + Scaffold_MEK_PP() r190_kpoff
	Reaction191: RAF() + Scaffold_MAPK() -> Scaffold_MAPK_RAF() r191_kon
	Reaction192: Scaffold_MAPK_RAF() -> RAF() + Scaffold_MAPK() r192_koff
	Reaction193: RAF_P() + Scaffold_MAPK() -> Scaffold_MAPK_RAF_P() r193_kpon
	Reaction194: Scaffold_MAPK_RAF_P() -> RAF_P() + Scaffold_MAPK() r194_kpoff
	Reaction195: RAF() + Scaffold_MAPK_MEK() -> Scaffold_MAPK_MEK_RAF() r195_kon
	Reaction196: Scaffold_MAPK_MEK_RAF() -> RAF() + Scaffold_MAPK_MEK() r196_koff
	Reaction197: RAF_P() + Scaffold_MAPK_MEK() -> Scaffold_MAPK_MEK_RAF_P() r197_kpon
	Reaction198: Scaffold_MAPK_MEK_RAF_P() -> RAF_P() + Scaffold_MAPK_MEK() r198_kpoff
	Reaction199: RAF() + Scaffold_MAPK_MEK_P() -> Scaffold_MAPK_MEK_P_RAF() r199_kon
	Reaction200: Scaffold_MAPK_MEK_P_RAF() -> RAF() + Scaffold_MAPK_MEK_P() r200_koff
	Reaction201: RAF_P() + Scaffold_MAPK_MEK_P() -> Scaffold_MAPK_MEK_P_RAF_P() r201_kpon
	Reaction202: Scaffold_MAPK_MEK_P_RAF_P() -> RAF_P() + Scaffold_MAPK_MEK_P() r202_kpoff
	Reaction203: RAF() + Scaffold_MAPK_MEK_PP() -> Scaffold_MAPK_MEK_PP_RAF() r203_kon
	Reaction204: Scaffold_MAPK_MEK_PP_RAF() -> RAF() + Scaffold_MAPK_MEK_PP() r204_koff
	Reaction205: RAF_P() + Scaffold_MAPK_MEK_PP() -> Scaffold_MAPK_MEK_PP_RAF_P() r205_kpon
	Reaction206: Scaffold_MAPK_MEK_PP_RAF_P() -> RAF_P() + Scaffold_MAPK_MEK_PP() r206_kpoff
	Reaction207: RAF() + Scaffold_MAPK_P() -> Scaffold_MAPK_P_RAF() r207_kon
	Reaction208: Scaffold_MAPK_P_RAF() -> RAF() + Scaffold_MAPK_P() r208_koff
	Reaction209: RAF_P() + Scaffold_MAPK_P() -> Scaffold_MAPK_P_RAF_P() r209_kpon
	Reaction210: Scaffold_MAPK_P_RAF_P() -> RAF_P() + Scaffold_MAPK_P() r210_kpoff
	Reaction211: RAF() + Scaffold_MAPK_P_MEK() -> Scaffold_MAPK_P_MEK_RAF() r211_kon
	Reaction212: Scaffold_MAPK_P_MEK_RAF() -> RAF() + Scaffold_MAPK_P_MEK() r212_koff
	Reaction213: RAF_P() + Scaffold_MAPK_P_MEK() -> Scaffold_MAPK_P_MEK_RAF_P() r213_kpon
	Reaction214: Scaffold_MAPK_P_MEK_RAF_P() -> RAF_P() + Scaffold_MAPK_P_MEK() r214_kpoff
	Reaction215: RAF() + Scaffold_MAPK_P_MEK_P() -> Scaffold_MAPK_P_MEK_P_RAF() r215_kon
	Reaction216: Scaffold_MAPK_P_MEK_P_RAF() -> RAF() + Scaffold_MAPK_P_MEK_P() r216_koff
	Reaction217: RAF_P() + Scaffold_MAPK_P_MEK_P() -> Scaffold_MAPK_P_MEK_P_RAF_P() r217_kpon
	Reaction218: Scaffold_MAPK_P_MEK_P_RAF_P() -> RAF_P() + Scaffold_MAPK_P_MEK_P() r218_kpoff
	Reaction219: RAF() + Scaffold_MAPK_P_MEK_PP() -> Scaffold_MAPK_P_MEK_PP_RAF() r219_kon
	Reaction220: Scaffold_MAPK_P_MEK_PP_RAF() -> RAF() + Scaffold_MAPK_P_MEK_PP() r220_koff
	Reaction221: RAF_P() + Scaffold_MAPK_P_MEK_PP() -> Scaffold_MAPK_P_MEK_PP_RAF_P() r221_kpon
	Reaction222: Scaffold_MAPK_P_MEK_PP_RAF_P() -> RAF_P() + Scaffold_MAPK_P_MEK_PP() r222_kpoff
	Reaction223: RAF() + Scaffold_MAPK_PP() -> Scaffold_MAPK_PP_RAF() r223_kon
	Reaction224: Scaffold_MAPK_PP_RAF() -> RAF() + Scaffold_MAPK_PP() r224_koff
	Reaction225: RAF_P() + Scaffold_MAPK_PP() -> Scaffold_MAPK_PP_RAF_P() r225_kpon
	Reaction226: Scaffold_MAPK_PP_RAF_P() -> RAF_P() + Scaffold_MAPK_PP() r226_kpoff
	Reaction227: RAF() + Scaffold_MAPK_PP_MEK() -> Scaffold_MAPK_PP_MEK_RAF() r227_kon
	Reaction228: Scaffold_MAPK_PP_MEK_RAF() -> RAF() + Scaffold_MAPK_PP_MEK() r228_koff
	Reaction229: RAF_P() + Scaffold_MAPK_PP_MEK() -> Scaffold_MAPK_PP_MEK_RAF_P() r229_kpon
	Reaction230: Scaffold_MAPK_PP_MEK_RAF_P() -> RAF_P() + Scaffold_MAPK_PP_MEK() r230_kpoff
	Reaction231: RAF() + Scaffold_MAPK_PP_MEK_P() -> Scaffold_MAPK_PP_MEK_P_RAF() r231_kon
	Reaction232: Scaffold_MAPK_PP_MEK_P_RAF() -> RAF() + Scaffold_MAPK_PP_MEK_P() r232_koff
	Reaction233: RAF_P() + Scaffold_MAPK_PP_MEK_P() -> Scaffold_MAPK_PP_MEK_P_RAF_P() r233_kpon
	Reaction234: Scaffold_MAPK_PP_MEK_P_RAF_P() -> RAF_P() + Scaffold_MAPK_PP_MEK_P() r234_kpoff
	Reaction235: RAF() + Scaffold_MAPK_PP_MEK_PP() -> Scaffold_MAPK_PP_MEK_PP_RAF() r235_kon
	Reaction236: Scaffold_MAPK_PP_MEK_PP_RAF() -> RAF() + Scaffold_MAPK_PP_MEK_PP() r236_koff
	Reaction237: RAF_P() + Scaffold_MAPK_PP_MEK_PP() -> Scaffold_MAPK_PP_MEK_PP_RAF_P() r237_kpon
	Reaction238: Scaffold_MAPK_PP_MEK_PP_RAF_P() -> RAF_P() + Scaffold_MAPK_PP_MEK_PP() r238_kpoff
	Reaction239: Scaffold_MAPK_MEK_PP() -> Scaffold_MAPK_P_MEK_PP() r239_k7
	Reaction240: Scaffold_MAPK_MEK_PP_RAF() -> Scaffold_MAPK_P_MEK_PP_RAF() r240_k7
	Reaction241: Scaffold_MAPK_MEK_PP_RAF_P() -> Scaffold_MAPK_P_MEK_PP_RAF_P() r241_k7
	Reaction242: Scaffold_MAPK_P_MEK_PP() -> Scaffold_MAPK_PP_MEK_PP() r242_k9a
	Reaction243: Scaffold_MAPK_P_MEK_PP_RAF() -> Scaffold_MAPK_PP_MEK_PP_RAF() r243_k9a
	Reaction244: Scaffold_MAPK_P_MEK_PP_RAF_P() -> Scaffold_MAPK_PP_MEK_PP_RAF_P() r244_k9a
	Reaction245: Scaffold_MEK_RAF_P() -> Scaffold_MEK_P_RAF_P() r245_k3
	Reaction246: Scaffold_MEK_P_RAF_P() -> Scaffold_MEK_PP_RAF_P() r246_k5a
	Reaction247: Scaffold_MAPK_MEK_RAF_P() -> Scaffold_MAPK_MEK_P_RAF_P() r247_k3
	Reaction248: Scaffold_MAPK_MEK_P_RAF_P() -> Scaffold_MAPK_MEK_PP_RAF_P() r248_k5a
	Reaction249: Scaffold_MAPK_P_MEK_RAF_P() -> Scaffold_MAPK_P_MEK_P_RAF_P() r249_k3
	Reaction250: Scaffold_MAPK_P_MEK_P_RAF_P() -> Scaffold_MAPK_P_MEK_PP_RAF_P() r250_k5a
	Reaction251: Scaffold_MAPK_PP_MEK_RAF_P() -> Scaffold_MAPK_PP_MEK_P_RAF_P() r251_k3
	Reaction252: Scaffold_MAPK_PP_MEK_P_RAF_P() -> Scaffold_MAPK_PP_MEK_PP_RAF_P() r252_k5a
	Reaction253: RAFkinase() + Scaffold_RAF() -> Scaffold_RAF_S_RAFK_m1_m1_0() r253_k1a
	Reaction254: Scaffold_RAF_S_RAFK_m1_m1_0() -> RAFkinase() + Scaffold_RAF() r254_d1a
	Reaction255: Scaffold_RAF_S_RAFK_m1_m1_0() -> RAFkinase() + Scaffold_RAF_P() r255_k1
	Reaction256: RAFkinase() + Scaffold_MEK_RAF() -> Scaffold_MEK_RAF_S_RAFK_m1_0_0() r256_k1a
	Reaction257: Scaffold_MEK_RAF_S_RAFK_m1_0_0() -> RAFkinase() + Scaffold_MEK_RAF() r257_d1a
	Reaction258: Scaffold_MEK_RAF_S_RAFK_m1_0_0() -> RAFkinase() + Scaffold_MEK_RAF_P() r258_k1
	Reaction259: RAFkinase() + Scaffold_MEK_P_RAF() -> Scaffold_MEK_P_RAF_S_RAFK_m1_1_0() r259_k1a
	Reaction260: Scaffold_MEK_P_RAF_S_RAFK_m1_1_0() -> RAFkinase() + Scaffold_MEK_P_RAF() r260_d1a
	Reaction261: Scaffold_MEK_P_RAF_S_RAFK_m1_1_0() -> RAFkinase() + Scaffold_MEK_P_RAF_P() r261_k1
	Reaction262: RAFkinase() + Scaffold_MEK_PP_RAF() -> Scaffold_MEK_PP_RAF_S_RAFK_m1_2_0() r262_k1a
	Reaction263: Scaffold_MEK_PP_RAF_S_RAFK_m1_2_0() -> RAFkinase() + Scaffold_MEK_PP_RAF() r263_d1a
	Reaction264: Scaffold_MEK_PP_RAF_S_RAFK_m1_2_0() -> RAFkinase() + Scaffold_MEK_PP_RAF_P() r264_k1
	Reaction265: RAFkinase() + Scaffold_MAPK_RAF() -> Scaffold_MAPK_RAF_S_RAFK_0_m1_0() r265_k1a
	Reaction266: Scaffold_MAPK_RAF_S_RAFK_0_m1_0() -> RAFkinase() + Scaffold_MAPK_RAF() r266_d1a
	Reaction267: Scaffold_MAPK_RAF_S_RAFK_0_m1_0() -> RAFkinase() + Scaffold_MAPK_RAF_P() r267_k1
	Reaction268: RAFkinase() + Scaffold_MAPK_MEK_RAF() -> Scaffold_MAPK_MEK_RAF_S_RAFK_0_0_0() r268_k1a
	Reaction269: Scaffold_MAPK_MEK_RAF_S_RAFK_0_0_0() -> RAFkinase() + Scaffold_MAPK_MEK_RAF() r269_d1a
	Reaction270: Scaffold_MAPK_MEK_RAF_S_RAFK_0_0_0() -> RAFkinase() + Scaffold_MAPK_MEK_RAF_P() r270_k1
	Reaction271: RAFkinase() + Scaffold_MAPK_MEK_P_RAF() -> Scaffold_MAPK_MEK_P_RAF_S_RAFK_0_1_0() r271_k1a
	Reaction272: Scaffold_MAPK_MEK_P_RAF_S_RAFK_0_1_0() -> RAFkinase() + Scaffold_MAPK_MEK_P_RAF() r272_d1a
	Reaction273: Scaffold_MAPK_MEK_P_RAF_S_RAFK_0_1_0() -> RAFkinase() + Scaffold_MAPK_MEK_P_RAF_P() r273_k1
	Reaction274: RAFkinase() + Scaffold_MAPK_MEK_PP_RAF() -> Scaffold_MAPK_MEK_PP_RAF_S_RAFK_0_2_0() r274_k1a
	Reaction275: Scaffold_MAPK_MEK_PP_RAF_S_RAFK_0_2_0() -> RAFkinase() + Scaffold_MAPK_MEK_PP_RAF() r275_d1a
	Reaction276: Scaffold_MAPK_MEK_PP_RAF_S_RAFK_0_2_0() -> RAFkinase() + Scaffold_MAPK_MEK_PP_RAF_P() r276_k1
	Reaction277: RAFkinase() + Scaffold_MAPK_P_RAF() -> Scaffold_MAPK_P_RAF_S_RAFK_1_m1_0() r277_k1a
	Reaction278: Scaffold_MAPK_P_RAF_S_RAFK_1_m1_0() -> RAFkinase() + Scaffold_MAPK_P_RAF() r278_d1a
	Reaction279: Scaffold_MAPK_P_RAF_S_RAFK_1_m1_0() -> RAFkinase() + Scaffold_MAPK_P_RAF_P() r279_k1
	Reaction280: RAFkinase() + Scaffold_MAPK_P_MEK_RAF() -> Scaffold_MAPK_P_MEK_RAF_S_RAFK_1_0_0() r280_k1a
	Reaction281: Scaffold_MAPK_P_MEK_RAF_S_RAFK_1_0_0() -> RAFkinase() + Scaffold_MAPK_P_MEK_RAF() r281_d1a
	Reaction282: Scaffold_MAPK_P_MEK_RAF_S_RAFK_1_0_0() -> RAFkinase() + Scaffold_MAPK_P_MEK_RAF_P() r282_k1
	Reaction283: RAFkinase() + Scaffold_MAPK_P_MEK_P_RAF() -> Scaffold_MAPK_P_MEK_P_RAF_S_RAFK_1_1_0() r283_k1a
	Reaction284: Scaffold_MAPK_P_MEK_P_RAF_S_RAFK_1_1_0() -> RAFkinase() + Scaffold_MAPK_P_MEK_P_RAF() r284_d1a
	Reaction285: Scaffold_MAPK_P_MEK_P_RAF_S_RAFK_1_1_0() -> RAFkinase() + Scaffold_MAPK_P_MEK_P_RAF_P() r285_k1
	Reaction286: RAFkinase() + Scaffold_MAPK_P_MEK_PP_RAF() -> Scaffold_MAPK_P_MEK_PP_RAF_S_RAFK_1_2_0() r286_k1a
	Reaction287: Scaffold_MAPK_P_MEK_PP_RAF_S_RAFK_1_2_0() -> RAFkinase() + Scaffold_MAPK_P_MEK_PP_RAF() r287_d1a
	Reaction288: Scaffold_MAPK_P_MEK_PP_RAF_S_RAFK_1_2_0() -> RAFkinase() + Scaffold_MAPK_P_MEK_PP_RAF_P() r288_k1
	Reaction289: RAFkinase() + Scaffold_MAPK_PP_RAF() -> Scaffold_MAPK_PP_RAF_S_RAFK_2_m1_0() r289_k1a
	Reaction290: Scaffold_MAPK_PP_RAF_S_RAFK_2_m1_0() -> RAFkinase() + Scaffold_MAPK_PP_RAF() r290_d1a
	Reaction291: Scaffold_MAPK_PP_RAF_S_RAFK_2_m1_0() -> RAFkinase() + Scaffold_MAPK_PP_RAF_P() r291_k1
	Reaction292: RAFkinase() + Scaffold_MAPK_PP_MEK_RAF() -> Scaffold_MAPK_PP_MEK_RAF_S_RAFK_2_0_0() r292_k1a
	Reaction293: Scaffold_MAPK_PP_MEK_RAF_S_RAFK_2_0_0() -> RAFkinase() + Scaffold_MAPK_PP_MEK_RAF() r293_d1a
	Reaction294: Scaffold_MAPK_PP_MEK_RAF_S_RAFK_2_0_0() -> RAFkinase() + Scaffold_MAPK_PP_MEK_RAF_P() r294_k1
	Reaction295: RAFkinase() + Scaffold_MAPK_PP_MEK_P_RAF() -> Scaffold_MAPK_PP_MEK_P_RAF_S_RAFK_2_1_0() r295_k1a
	Reaction296: Scaffold_MAPK_PP_MEK_P_RAF_S_RAFK_2_1_0() -> RAFkinase() + Scaffold_MAPK_PP_MEK_P_RAF() r296_d1a
	Reaction297: Scaffold_MAPK_PP_MEK_P_RAF_S_RAFK_2_1_0() -> RAFkinase() + Scaffold_MAPK_PP_MEK_P_RAF_P() r297_k1
	Reaction298: RAFkinase() + Scaffold_MAPK_PP_MEK_PP_RAF() -> Scaffold_MAPK_PP_MEK_PP_RAF_S_RAFK_2_2_0() r298_k1a
	Reaction299: Scaffold_MAPK_PP_MEK_PP_RAF_S_RAFK_2_2_0() -> RAFkinase() + Scaffold_MAPK_PP_MEK_PP_RAF() r299_d1a
	Reaction300: Scaffold_MAPK_PP_MEK_PP_RAF_S_RAFK_2_2_0() -> RAFkinase() + Scaffold_MAPK_PP_MEK_PP_RAF_P() r300_k1
end reaction rules
end model
