###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000031', 'http://identifiers.org/biomodels.db/MODEL6618738800']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/14744999']
#@BQB_IS_VERSION_OF:['http://identifiers.org/obo.go/GO:0000165']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/8355']
#@creatorEmail:'lenov@ebi.ac.uk'
#@creatorName:'Le Novère Nicolas'
#@notes:'This is a plain translation of an SBML model created on 13/08/2021. The original model has 6 molecules and 4 reactions. The translated model has 3 molecules and 4 rules'
###
begin model
begin parameters
	k1cat 0.01
	Km1 50.0
	k2cat 15.0
	Km2 500.0
	k3cat 0.084
	Km3 5.0
	k4cat 0.06
	Km4 18.0
	Km5 78.0
	MAPKK1 100.0
	MAPKK2 1.0
	MKP3 100.0
end parameters
begin molecule types
	Mpp()
	M()
	Mp()
end molecule types
begin seed species
	M() 500.0 #M #M
end seed species
begin observables
	Species M M() #M
	Species Mp Mp() #Mp
	Species Mpp Mpp() #Mpp
end observables
begin functions
	fRate0() = MAPKK1*k1cat/(Km1 + M)
	fRate1() = MAPKK2*k2cat/(Km2 + Mp)
	fRate2() = Km4*Km5*MKP3*k3cat/(Km3*Km4*M + Km3*Km5*Mp + Km4*Km5*(Km3 + Mpp))
	fRate3() = Km3*Km5*MKP3*k4cat/(Km3*Km4*M + Km3*Km5*(Km4 + Mp) + Km4*Km5*Mpp)
end functions
begin reaction rules
	v1: M() -> Mp() fRate0() #Modifiers(MAPKK1)
	v2: Mp() -> Mpp() fRate1() #Modifiers(MAPKK2, M)
	v3: Mpp() -> Mp() fRate2() #Modifiers(MKP3, M)
	v4: Mp() -> M() fRate3() #Modifiers(MKP3, Mpp)
end reaction rules
end model
