###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1166069080', 'http://identifiers.org/biomodels.db/BIOMD0000000082']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/2904647']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/pubmed/6277164', 'http://identifiers.org/pubmed/6248546']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0031684', 'http://identifiers.org/go/GO:0007194']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@creatorEmail:'enuo.he@wolfson.ox.ac.uk'
#@creatorName:'He Enuo'
#@notes:'This is a plain translation of an SBML model created on 14/08/2021. The original model has 10 molecules and 6 reactions. The translated model has 10 molecules and 6 rules'
###
begin model
begin parameters
	r1_k1 5000000.000000
	r1_k7 0.500000
	r2_k2 100000000.000000
	r2_k8 0.100000
	r3_k3 0.100000
	r3_k9 100000.000000
	r4_k4 10000000.000000
	r4_k10 0.100000
	r5_k5 0.050000
	r6_k6 0.100000
end parameters
begin molecule types
	DR()
	R()
	DRG_GDP()
	G_GDP()
	G_GTP()
	DRG()
	DRG_GTP()
	GTP()
	D()
	GDP()
end molecule types
begin seed species
	D() 6022000000000000.0 # 1e-08mol/L * 6.022e23/mol *1.0L #D #agonist
	GTP() 6.022000000000001e+18 #original 1e-05mol/L  #GTP #GTP
	R() 602200000000000.1 #original 1e-09mol/L  #R #Recptor
	G_GDP() 602200000000000.1 #original 1e-09mol/L  #G_GDP #G_GDP
end seed species
begin observables
	Species D D() #D
	Species DR DR() #DR
	Species DRG_GDP DRG_GDP() #DRG_GDP
	Species DRG DRG() #DRG
	Species GDP GDP() #GDP
	Species DRG_GTP DRG_GTP() #DRG_GTP
	Species GTP GTP() #GTP
	Species R R() #R
	Species G_GDP G_GDP() #G_GDP
	Species G_GTP G_GTP() #G_GTP
end observables
begin reaction rules
	Forming: D() + R() <-> DR() r1_k1,r1_k7
	reaction_1: DR() + G_GDP() <-> DRG_GDP() r2_k2,r2_k8
	reaction_2: DRG_GDP() <-> GDP() + DRG() r3_k3,r3_k9
	reaction_3: DRG() + GTP() <-> DRG_GTP() r4_k4,r4_k10
	reaction_4: DRG_GTP() -> G_GTP() + DR() r5_k5
	reaction_5: G_GTP() -> G_GDP() r6_k6
end reaction rules
end model
