###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000084', 'http://identifiers.org/biomodels.db/MODEL6623610941']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/15634347']
#@BQB_IS:['http://identifiers.org/obo.go/GO:0007173', 'http://identifiers.org/obo.go/GO:0000165']
#@BQB_HAS_PART:['http://identifiers.org/kegg.pathway/rno04010']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/40674']
#@creatorEmail:'hdharuri@cds.caltech.edu'
#@creatorName:'Dharuri Harish'
#@notes:'This is a plain translation of an SBML model created on 14/08/2021. The original model has 8 molecules and 8 reactions. The translated model has 8 molecules and 8 rules'
###
begin model
begin parameters
	r1_Vm1 1.000000
	r1_Km1 0.100000
	r2_Vm2 0.010000
	r2_Km2 0.100000
	r3_k3 1.000000
	r3_Km3 0.100000
	r4_Vm4 0.300000
	r4_Km4 1.000000
	r5_k5 1.000000
	r5_Km5 0.100000
	r6_Vm6 0.300000
	r6_Km6 1.000000
	r7_k7 1.000000
	r7_Km7 0.100000
	r8_Vm8 0.300000
	r8_Km8 1.000000
	r8_Inh 0.000000
	r8_Ki8 1.000000
end parameters
begin molecule types
	x2p()
	Rin()
	x3()
	x3p()
	R()
	x1()
	x2()
	x1p()
end molecule types
begin seed species
	R() 0.5 #R #R
	x1() 1.0 #x1 #x1
	x2() 1.0 #x2 #x2
	x3() 1.0 #x3 #x3
end seed species
begin observables
	Species R R() #R
	Species Rin Rin() #Rin
	Species x1 x1() #x1
	Species x1p x1p() #x1p
	Species x2 x2() #x2
	Species x2p x2p() #x2p
	Species x3 x3() #x3
	Species x3p x3p() #x3p
end observables
begin functions
	fRate0() = 1.0/(R + 0.1)
	fRate1() = 0.01/(Rin + 0.1)
	fRate2() = 1.0*R/(x1 + 0.1)
	fRate3() = 0.3/(x1p + 1.0)
	fRate4() = 1.0*x1p/(x2 + 0.1)
	fRate5() = 0.3/(x2p + 1.0)
	fRate6() = 1.0*x2p/(x3 + 0.1)
	fRate7() = 0.3/(1.0*x3p + 1.0)
end functions
begin reaction rules
	v1: R() -> Rin() fRate0()
	v2: Rin() -> R() fRate1()
	v3: x1() -> x1p() fRate2() #Modifiers(R)
	v4: x1p() -> x1() fRate3()
	v5: x2() -> x2p() fRate4() #Modifiers(x1p)
	v6: x2p() -> x2() fRate5()
	v7: x3() -> x3p() fRate6() #Modifiers(x2p)
	v8: x3p() -> x3() fRate7()
end reaction rules
end model
