###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL8679489165', 'http://identifiers.org/biomodels.db/BIOMD0000000087']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/17015293']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/4932']
#@BQB_IS_PART_OF:['http://identifiers.org/kegg.pathway/sce04111']
#@BQB_IS_VERSION_OF:['http://identifiers.org/obo.go/GO:0000075']
#@creatorEmail:'c.j.proctor@ncl.ac.uk'
#@creatorName:'Proctor Carole'
#@notes:'This is a plain translation of an SBML model created on 14/08/2021. The original model has 55 molecules and 43 reactions. The translated model has 54 molecules and 49 rules'
###
begin model
begin parameters
	kalive 1.0
	r1_k1 0.000500
	r2_k2 0.000385
	r3_k3 0.000000
	r4_k4 0.010000
	r5_k5 0.000300
	r6_k6a 0.000050
	r7_k6b 0.000500
	r8_k7a 0.000030
	r9_k7b 0.000030
	r10_k8a 0.001000
	r11_k8b 100.000000
	r12_k8c 100.000000
	r13_k8d 0.004000
	r14_k9 100.000000
	r15_k10a 0.050000
	r16_k10b 0.050000
	r17_k11 0.000010
	r18_k12 0.000170
	r19_k13 1.000000
	r20_k14 0.000003
	r21_k15 0.200000
	r22_k16 0.100000
	r23_k17a 0.050000
	r24_k17b 0.050000
	r25_k18a 0.001000
	r26_k18b 0.000010
	r27_k19 0.001000
	r28_kc1 0.160000
	r29_kc1 0.160000
	r30_kc1 0.160000
	r31_kc1 0.160000
	r32_kc2 0.010000
	r33_kc2 0.010000
	r34_kc2 0.010000
	r35_kc2 0.010000
	r36_kc3 0.001200
	r37_kc3 0.001200
	r38_kc3 0.001200
	r39_kc3 0.001200
	r40_kc4 0.010000
	r41_kc4 0.010000
	r42_kc4 0.010000
	r43_kc4 0.010000
end parameters
begin compartments
	#volume units: L
	cellMembrane 3 1.0
	nucleus 3 1.0
end compartments
begin molecule types
	Cdc13()
	Chk1A()
	G1CdkA()
	G2CdkI()
	G2Moff()
	G2Mon()
	Rad9I()
	MCdkI()
	G1CdkI()
	Chk1I()
	Dun1I()
	G1cyclin()
	S()
	Rad17()
	ExoXA()
	Rad53A()
	Mec1()
	Mcyclin()
	Dun1A()
	G2()
	Rad9A()
	recovery()
	RPA()
	M()
	MCdkA()
	SG2off()
	budscar()
	MG1on()
	ATP()
	Scyclin()
	Rad17Utelo()
	SCdkI()
	G2cyclin()
	G2CdkA()
	Exo1I()
	Rad53I()
	Ctelo()
	G1Son()
	RPAssDNA2()
	G1()
	G1Soff()
	ExoXI()
	Rad9Kin()
	ADP()
	RPAssDNA1()
	Mec1RPAssDNA()
	SCdkA()
	Rad24()
	Utelo()
	MG1off()
	RPAssDNA()
	ssDNA()
	SG2on()
	Exo1A()
end molecule types
begin seed species
	@nucleus:Ctelo() 64.0 #Ctelo #Ctelo
	@nucleus:Cdc13() 300.0 #Cdc13 #Cdc13
	@nucleus:Rad17() 70.0 #Rad17 #Rad17
	@nucleus:Rad24() 70.0 #Rad24 #Rad24
	@nucleus:RPA() 4000.0 #RPA #RPA
	@nucleus:Mec1() 4000.0 #Mec1 #Mec1
	@nucleus:ExoXI() 70.0 #ExoXI #ExoXI
	@nucleus:Exo1I() 670.0 #Exo1I #Exo1I
	@nucleus:Rad9I() 20.0 #Rad9I #Rad9I
	@nucleus:Rad53I() 6900.0 #Rad53I #Rad53I
	@nucleus:Chk1I() 60.0 #Chk1I #Chk1I
	@nucleus:Dun1I() 3000.0 #Dun1I #Dun1I
	@nucleus:ATP() 10000.0 #ATP #ATP
	@nucleus:ADP() 1000.0 #ADP #ADP
	@nucleus:G1() 1.0 #G1 #G1
	@nucleus:G1CdkI() 1.0 #G1CdkI #G1CdkI
	@nucleus:SCdkI() 1.0 #SCdkI #SCdkI
	@nucleus:G2CdkI() 1.0 #G2CdkI #G2CdkI
	@nucleus:MCdkI() 1.0 #MCdkI #MCdkI
	@nucleus:G1Soff() 1.0 #G1Soff #G1Soff
	@nucleus:SG2off() 1.0 #SG2off #SG2off
	@nucleus:G2Moff() 1.0 #G2Moff #G2Moff
	@nucleus:MG1off() 1.0 #MG1off #MG1off
end seed species
begin observables
	Species Ctelo_nucleus @nucleus:Ctelo() #Ctelo
	Species Utelo_nucleus @nucleus:Utelo() #Utelo
	Species Cdc13_nucleus @nucleus:Cdc13() #Cdc13
	Species Rad17Utelo_nucleus @nucleus:Rad17Utelo() #Rad17Utelo
	Species Rad17_nucleus @nucleus:Rad17() #Rad17
	Species Rad24_nucleus @nucleus:Rad24() #Rad24
	Species RPA_nucleus @nucleus:RPA() #RPA
	Species Mec1_nucleus @nucleus:Mec1() #Mec1
	Species ssDNA_nucleus @nucleus:ssDNA() #ssDNA
	Species RPAssDNA_nucleus @nucleus:RPAssDNA() #RPAssDNA
	Species RPAssDNA1_nucleus @nucleus:RPAssDNA1() #RPAssDNA1
	Species RPAssDNA2_nucleus @nucleus:RPAssDNA2() #RPAssDNA2
	Species Mec1RPAssDNA_nucleus @nucleus:Mec1RPAssDNA() #Mec1RPAssDNA
	Species ExoXI_nucleus @nucleus:ExoXI() #ExoXI
	Species ExoXA_nucleus @nucleus:ExoXA() #ExoXA
	Species Exo1I_nucleus @nucleus:Exo1I() #Exo1I
	Species Exo1A_nucleus @nucleus:Exo1A() #Exo1A
	Species Rad9I_nucleus @nucleus:Rad9I() #Rad9I
	Species Rad9A_nucleus @nucleus:Rad9A() #Rad9A
	Species Rad53I_nucleus @nucleus:Rad53I() #Rad53I
	Species Rad53A_nucleus @nucleus:Rad53A() #Rad53A
	Species Chk1I_nucleus @nucleus:Chk1I() #Chk1I
	Species Chk1A_nucleus @nucleus:Chk1A() #Chk1A
	Species Dun1I_nucleus @nucleus:Dun1I() #Dun1I
	Species Dun1A_nucleus @nucleus:Dun1A() #Dun1A
	Species ATP_nucleus @nucleus:ATP() #ATP
	Species ADP_nucleus @nucleus:ADP() #ADP
	Species Rad9Kin_nucleus @nucleus:Rad9Kin() #Rad9Kin
	Species recovery_nucleus @nucleus:recovery() #recovery
	Species G1_nucleus @nucleus:G1() #G1
	Species S_nucleus @nucleus:S() #S
	Species G2_nucleus @nucleus:G2() #G2
	Species M_nucleus @nucleus:M() #M
	Species G1cyclin_nucleus @nucleus:G1cyclin() #G1cyclin
	Species Scyclin_nucleus @nucleus:Scyclin() #Scyclin
	Species G2cyclin_nucleus @nucleus:G2cyclin() #G2cyclin
	Species Mcyclin_nucleus @nucleus:Mcyclin() #Mcyclin
	Species G1CdkI_nucleus @nucleus:G1CdkI() #G1CdkI
	Species G1CdkA_nucleus @nucleus:G1CdkA() #G1CdkA
	Species SCdkI_nucleus @nucleus:SCdkI() #SCdkI
	Species SCdkA_nucleus @nucleus:SCdkA() #SCdkA
	Species G2CdkI_nucleus @nucleus:G2CdkI() #G2CdkI
	Species G2CdkA_nucleus @nucleus:G2CdkA() #G2CdkA
	Species MCdkI_nucleus @nucleus:MCdkI() #MCdkI
	Species MCdkA_nucleus @nucleus:MCdkA() #MCdkA
	Species G1Soff_nucleus @nucleus:G1Soff() #G1Soff
	Species G1Son_nucleus @nucleus:G1Son() #G1Son
	Species SG2off_nucleus @nucleus:SG2off() #SG2off
	Species SG2on_nucleus @nucleus:SG2on() #SG2on
	Species G2Moff_nucleus @nucleus:G2Moff() #G2Moff
	Species G2Mon_nucleus @nucleus:G2Mon() #G2Mon
	Species MG1off_nucleus @nucleus:MG1off() #MG1off
	Species MG1on_nucleus @nucleus:MG1on() #MG1on
	Species budscar_cellMembrane @cellMembrane:budscar() #budscar
end observables
begin functions
	fRate0() = 0.0005*kalive
	fRate1() = 0.000385*kalive
	fRate2() = 1.5e-8*ATP_nucleus*Rad17_nucleus*Rad24_nucleus*Utelo_nucleus*kalive/(ATP_nucleus + 5000)
	fRate3() = 0.01*kalive
	fRate4() = 0.0003*kalive
	fRate5() = 5.0e-5*kalive
	fRate6() = 0.0005*kalive
	fRate7() = 3.0e-5*kalive
	fRate8() = 3.0e-5*kalive
	fRate9() = 0.001*kalive
	fRate10() = 100.0*kalive
	fRate11() = 100.0*kalive
	fRate12() = 0.004*kalive
	fRate13() = 100.0*kalive
	fRate14() = 0.05*kalive
	fRate15() = 0.05*kalive
	fRate16() = 1.0e-5*kalive
	fRate17() = 0.00017*kalive
	fRate18() = 1.0*kalive
	fRate19() = 3.3e-6*kalive
	fRate20() = 0.2*kalive
	fRate21() = 0.1*kalive
	fRate22() = 0.05*kalive
	fRate23() = 0.05*kalive
	fRate24() = 0.001*kalive
	fRate25() = 1.0e-5*kalive
	fRate26() = 0.001*kalive
	fRate27() = 0.16*kalive
	fRate28() = 0.16*kalive
	fRate29() = 0.16*kalive
	fRate30() = 0.16*kalive
	fRate31() = 0.01*kalive
	fRate32() = 0.01*kalive
	fRate33() = 0.01*kalive
	fRate34() = 0.01*kalive
	fRate35() = 0.0012*kalive
	fRate36() = 0.0012*kalive
	fRate37() = 0.0012*kalive
	fRate38() = 0.0012*kalive
	fRate39() = 0.01*kalive
	fRate40() = 0.01*kalive
	fRate41() = 0.01*kalive
	fRate42() = 0.01*kalive
end functions
begin reaction rules
	Capping: Cdc13()@nucleus + Utelo()@nucleus -> Ctelo()@nucleus fRate0()
	Uncapping: Ctelo()@nucleus -> Cdc13()@nucleus + Utelo()@nucleus fRate1()
	Rad17binding_reactants_0: 0  -> Utelo()@nucleus -1*(fRate2())
	Rad17binding_reactants_1: 0  -> Rad17()@nucleus -1*(fRate2())
	Rad17binding_reactants_2: 0  -> Rad24()@nucleus -1*(fRate2())
	Rad17binding_reactants_3: 0  -> ATP()@nucleus -1*(fRate2())
	Rad17binding_products_0: 0  -> Rad17Utelo()@nucleus fRate2()
	Rad17binding_products_1: 0  -> Rad24()@nucleus fRate2()
	Rad17binding_products_2: 0  -> ADP()@nucleus fRate2()
	ExoXactivation: ExoXI()@nucleus + Rad17Utelo()@nucleus -> ExoXA()@nucleus + Rad17Utelo()@nucleus fRate3()
	ExoXactivity: ExoXA()@nucleus + Rad17Utelo()@nucleus -> ExoXA()@nucleus + Rad17Utelo()@nucleus + ssDNA()@nucleus fRate4()
	Exo1activation: Exo1I()@nucleus -> Exo1A()@nucleus fRate5()
	Exo1Rad24dependentActivation: Exo1I()@nucleus + Rad24()@nucleus -> Exo1A()@nucleus + Rad24()@nucleus fRate6()
	Exo1Rad17independentActivity: Utelo()@nucleus + Exo1A()@nucleus -> Utelo()@nucleus + Exo1A()@nucleus + ssDNA()@nucleus fRate7()
	Exo1Rad17dependentActivity: Rad17Utelo()@nucleus + Exo1A()@nucleus -> Rad17Utelo()@nucleus + Exo1A()@nucleus + ssDNA()@nucleus fRate8()
	RPAbinding1: ssDNA()@nucleus + RPA()@nucleus -> RPAssDNA1()@nucleus fRate9()
	RPAbinding2: ssDNA()@nucleus + RPAssDNA1()@nucleus -> RPAssDNA2()@nucleus fRate10()
	RPAbinding: ssDNA()@nucleus + RPAssDNA2()@nucleus -> RPAssDNA()@nucleus fRate11()
	Mec1binding: RPAssDNA()@nucleus + Mec1()@nucleus -> Mec1RPAssDNA()@nucleus fRate12()
	Rad9activation: Rad9Kin()@nucleus + Rad9I()@nucleus -> Rad9Kin()@nucleus + Rad9A()@nucleus fRate13()
	ExoXinhibition: ExoXA()@nucleus + Rad9A()@nucleus -> ExoXI()@nucleus + Rad9A()@nucleus fRate14()
	ExoXinhibition2: ExoXA()@nucleus + Rad9I()@nucleus -> ExoXI()@nucleus + Rad9I()@nucleus fRate15()
	Rad53activation: Rad53I()@nucleus + Rad9A()@nucleus -> Rad53A()@nucleus + Rad9A()@nucleus fRate16()
	Chk1Activation: Chk1I()@nucleus + Rad9A()@nucleus -> Chk1A()@nucleus + Rad9A()@nucleus fRate17()
	Exo1inhibition: Exo1A()@nucleus + Rad53A()@nucleus -> Exo1I()@nucleus + Rad53A()@nucleus fRate18()
	Dun1activation: Dun1I()@nucleus + Rad53A()@nucleus -> Dun1A()@nucleus + Rad53A()@nucleus fRate19()
	Chk1cellArrest: Chk1A()@nucleus + G2Mon()@nucleus -> Chk1A()@nucleus + G2Moff()@nucleus fRate20()
	Dun1cellArrest: Dun1A()@nucleus + G2Mon()@nucleus -> Dun1A()@nucleus + G2Moff()@nucleus fRate21()
	SDNArepair1: Mec1RPAssDNA()@nucleus + S()@nucleus -> Mec1()@nucleus + RPA()@nucleus + S()@nucleus + ssDNA()@nucleus + ssDNA()@nucleus + ssDNA()@nucleus fRate22()
	G2DNArepair1: G2()@nucleus + G2Moff()@nucleus + Mec1RPAssDNA()@nucleus -> G2()@nucleus + G2Moff()@nucleus + Mec1()@nucleus + RPA()@nucleus + ssDNA()@nucleus + ssDNA()@nucleus + ssDNA()@nucleus fRate23()
	SDNArepair2: S()@nucleus + ssDNA()@nucleus -> S()@nucleus fRate24()
	G2DNArepair2: G2()@nucleus + G2Moff()@nucleus + ssDNA()@nucleus -> G2()@nucleus + G2Moff()@nucleus fRate25()
	Recovery: Cdc13()@nucleus + Rad17Utelo()@nucleus + recovery()@nucleus -> Ctelo()@nucleus + Rad17()@nucleus + recovery()@nucleus fRate26()
	G1cyclinSynthesis: G1()@nucleus -> G1cyclin()@nucleus + G1()@nucleus fRate27()
	ScyclinSynthesis: S()@nucleus -> Scyclin()@nucleus + S()@nucleus fRate28()
	G2cyclinSynthesis: G2()@nucleus -> G2cyclin()@nucleus + G2()@nucleus fRate29()
	McyclinSynthesis: M()@nucleus -> Mcyclin()@nucleus + M()@nucleus fRate30()
	G1toSGenesOn: G1Soff()@nucleus + G1()@nucleus + G1CdkA()@nucleus -> G1Son()@nucleus + G1()@nucleus + G1CdkA()@nucleus fRate31()
	StoG2GenesOn: SG2off()@nucleus + S()@nucleus + SCdkA()@nucleus -> SG2on()@nucleus + S()@nucleus + SCdkA()@nucleus fRate32()
	G2toMGenesOn: G2Moff()@nucleus + G2()@nucleus + G2CdkA()@nucleus -> G2Mon()@nucleus + G2()@nucleus + G2CdkA()@nucleus fRate33()
	MtoG1GenesOn: MG1off()@nucleus + M()@nucleus + MCdkA()@nucleus -> MG1on()@nucleus + M()@nucleus + MCdkA()@nucleus fRate34()
	G1cyclinDegradation: G1cyclin()@nucleus -> 0  fRate35()
	ScyclinDegradation: Scyclin()@nucleus -> 0  fRate36()
	G2cyclinDegradation: G2cyclin()@nucleus -> 0  fRate37()
	McyclinDegradation: Mcyclin()@nucleus -> 0  fRate38()
	G1toSProgession: G1()@nucleus + G1CdkA()@nucleus + G1Son()@nucleus -> G1CdkI()@nucleus + G1Soff()@nucleus + S()@nucleus fRate39()
	StoG2Progession: S()@nucleus + SCdkA()@nucleus + SG2on()@nucleus -> G2()@nucleus + SCdkI()@nucleus + SG2off()@nucleus fRate40()
	G2toMProgession: G2()@nucleus + G2CdkA()@nucleus + G2Mon()@nucleus -> G2CdkI()@nucleus + G2Moff()@nucleus + M()@nucleus fRate41()
	MtoG1Progession: M()@nucleus + MCdkA()@nucleus + MG1on()@nucleus -> budscar()@cellMembrane + G1()@nucleus + MCdkI()@nucleus + MG1off()@nucleus fRate42()
end reaction rules
end model
