###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL9728951048', 'http://identifiers.org/biomodels.db/BIOMD0000000090']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/11423122']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/4932']
#@BQB_IS_VERSION_OF:['http://identifiers.org/obo.go/GO:0019379']
#@creatorEmail:'raim@tbi.univie.ac.at'
#@creatorName:'Machne Rainer'
#@notes:'This is a plain translation of an SBML model created on 13/08/2021. The original model has 26 molecules and 21 reactions. The translated model has 26 molecules and 44 rules'
###
begin model
begin parameters
	k_v0 1.6
	k2 0.2
	k3 0.2
	k4 0.2
	k5 0.1
	k6 0.12
	k7 10.0
	k8 10.0
	k9 10.0
	k_v10 80.0
	k11 10.0
	k12 5.0
	k_v13 4.0
	k14 10.0
	k15 5.0
	k16 10.0
	k17 0.02
	k18 1.0
	n 4.0
	m 4.0
	Ka 1.0
	Kc 0.1
	a 0.1
	Ac 2.0
	Am 2.0
	S 2.0
	N 2.0
	Kh 0.5
end parameters
begin compartments
	#volume units: L
	c0 3 1.0 #external
	c1 3 1.0 #cytosol
	c2 3 1.0 #mitochondria
end compartments
begin molecule types
	ATP_mit()
	AcCoA()
	ADP_mit()
	NADH()
	H2O()
	PPi()
	EtOH()
	H2S()
	OAH()
	S2()
	SO4_ex()
	EtOH_ex()
	Hm()
	O2()
	O2_ex()
	ADP()
	APS()
	C1()
	ATP()
	SO4()
	CYS()
	C2()
	S1()
	PAPS()
	Ho()
	NAD()
end molecule types
begin seed species
	@c2:O2() 4.2154000000000004e+24 # 7.0mol/L * 6.022e23/mol *1.0L #O2 #oxy
	@c1:ATP() 9.033e+23 #original 1.5mol/L #ATP #A3c
	@c1:APS() 3.011e+23 #original 0.5mol/L #APS #aps
	@c1:PAPS() 2.4088000000000004e+23 #original 0.4mol/L #PAPS #pap
	@c1:SO4() 2.4088000000000004e+23 #original 0.4mol/L #SO4 #sul
	@c1:EtOH() 2.4088e+24 #original 4.0mol/L #EtOH #eth
	@c1:ADP() 3.011e+23 #original 0.5mol/L #ADP #A2c
	@c1:H2S() 3.011e+23 #original 0.5mol/L #H2S #hyd
	@c1:CYS() 1.8066e+23 #original 0.3mol/L #CYS #cys
	@c1:NADH() 1.2044e+24 #original 2.0mol/L #NADH #N2
	@c1:AcCoA() 1.8066e+23 #original 0.3mol/L #AcCoA #aco
	@c1:OAH() 9.033e+23 #original 1.5mol/L #OAH #oah
	@c2:S1() 9.033e+23 #original 1.5mol/L #S1 #S1
	@c2:S2() -9.033e+23 #original 0.5mol/L #S2 #S2
	@c2:ADP_mit() 3.011e+23 #original 0.5mol/L #ADP_mit #A2m
	@c2:ATP_mit() 9.033e+23 #original 1.5mol/L #ATP_mit #A3m
end seed species
begin observables
	Species SO4_ex_c0 @c0:SO4_ex() #SO4_ex
	Species EtOH_ex_c0 @c0:EtOH_ex() #EtOH_ex
	Species O2_ex_c0 @c0:O2_ex() #O2_ex
	Species O2_c2 @c2:O2() #O2
	Species H2O_c2 @c2:H2O() #H2O
	Species ATP_c1 @c1:ATP() #ATP
	Species APS_c1 @c1:APS() #APS
	Species PPi_c1 @c1:PPi() #PPi
	Species PAPS_c1 @c1:PAPS() #PAPS
	Species SO4_c1 @c1:SO4() #SO4
	Species EtOH_c1 @c1:EtOH() #EtOH
	Species ADP_c1 @c1:ADP() #ADP
	Species H2S_c1 @c1:H2S() #H2S
	Species CYS_c1 @c1:CYS() #CYS
	Species NADH_c1 @c1:NADH() #NADH
	Species NAD_c1 @c1:NAD() #NAD
	Species AcCoA_c1 @c1:AcCoA() #AcCoA
	Species OAH_c1 @c1:OAH() #OAH
	Species S1_c2 @c2:S1() #S1
	Species S2_c2 @c2:S2() #S2
	Species C1_c2 @c2:C1() #C1
	Species C2_c2 @c2:C2() #C2
	Species ADP_mit_c2 @c2:ADP_mit() #ADP_mit
	Species ATP_mit_c2 @c2:ATP_mit() #ATP_mit
	Species Ho_c1 @c1:Ho() #Ho
	Species Hm_c2 @c2:Hm() #Hm
end observables
begin functions
	S2_ar() = S - S1_c2
	NAD_ar() = N - NADH_c1
	ADP_mit_ar() = -ATP_mit_c2 + Am
	ADP_ar() = -ATP_c1 + Ac
	fRate0() = k_v0/((CYS_c1/Kc)^n + 1)
	fRate1() = k_v13
	fRate3() = k_v10
	fRate6() = NADH_c1*PAPS_c1*k4
	fRate9() = EtOH_c1*NAD_c1*k7
	fRate14() = NAD_c1*S1_c2*k9
	fRate15() = NADH_c1*O2_c2*k11/(((H2S_c1/Kh)^m + 1)*(NADH_c1*a + O2_c2))
	fRate16() = NADH_c1*O2_c2*k11/(((H2S_c1/Kh)^m + 1)*(NADH_c1*a + O2_c2))
	fRate18() = 3*ADP_mit_c2*NADH_c1*O2_c2*k11/((ADP_mit_c2 + Ka)*((H2S_c1/Kh)^m + 1)*(NADH_c1*a + O2_c2))
end functions
begin reaction rules
	v1_reactants_0: 0  -> SO4_ex()@c0 -1*(fRate0()) #Modifiers(cys)
	v1_products_0: 0  -> SO4()@c1 fRate0() #Modifiers(cys)
	v13_reactants_0: 0  -> EtOH_ex()@c0 -1*(fRate1())
	v13_products_0: 0  -> EtOH()@c1 fRate1()
	v2: SO4()@c1 + ATP()@c1 -> APS()@c1 + PPi()@c1 k2
	v10_reactants_0: 0  -> O2_ex()@c0 -1*(fRate3())
	v10_products_0: 0  -> O2()@c2 fRate3()
	v14: O2()@c2 -> O2_ex()@c0 k14
	v3: APS()@c1 + ATP()@c1 -> PAPS()@c1 + ADP()@c1 k3
	v4_reactants_0: 0  -> PAPS()@c1 -1*(fRate6())
	v4_reactants_1: 0  -> NADH()@c1 -1*3.0*(fRate6())
	v4_products_0: 0  -> H2S()@c1 fRate6()
	v4_products_1: 0  -> NAD()@c1 3.0*fRate6()
	v5: H2S()@c1 + OAH()@c1 -> CYS()@c1 k5
	v6: CYS()@c1 -> 0  k6
	v7_reactants_0: 0  -> EtOH()@c1 -1*(fRate9())
	v7_reactants_1: 0  -> NAD()@c1 -1*2.0*(fRate9())
	v7_products_0: 0  -> AcCoA()@c1 fRate9()
	v7_products_1: 0  -> NADH()@c1 2.0*fRate9()
	v15: AcCoA()@c1 -> OAH()@c1 k15
	v17: H2S()@c1 -> 0  k17
	v18: OAH()@c1 -> 0  k18
	v8: S2()@c2 + AcCoA()@c1 -> S1()@c2 k8
	v9_reactants_0: 0  -> S1()@c2 -1*(fRate14())
	v9_reactants_1: 0  -> NAD()@c1 -1*4.0*(fRate14())
	v9_products_0: 0  -> S2()@c2 fRate14()
	v9_products_1: 0  -> NADH()@c1 4.0*fRate14()
	v11a_reactants_0: 0  -> C1()@c2 -1*(fRate15()) #Modifiers(hyd, oxy)
	v11a_reactants_1: 0  -> Hm()@c2 -1*(fRate15()) #Modifiers(hyd, oxy)
	v11a_reactants_2: 0  -> NADH()@c1 -1*(fRate15()) #Modifiers(hyd, oxy)
	v11a_products_0: 0  -> C2()@c2 fRate15() #Modifiers(hyd, oxy)
	v11a_products_1: 0  -> Ho()@c1 fRate15() #Modifiers(hyd, oxy)
	v11a_products_2: 0  -> NAD()@c1 fRate15() #Modifiers(hyd, oxy)
	v11a2_reactants_0: 0  -> C2()@c2 -1*(fRate16()) #Modifiers(hyd, N2)
	v11a2_reactants_1: 0  -> O2()@c2 -1*(fRate16()) #Modifiers(hyd, N2)
	v11a2_products_0: 0  -> C1()@c2 fRate16() #Modifiers(hyd, N2)
	v11a2_products_1: 0  -> H2O()@c2 fRate16() #Modifiers(hyd, N2)
	v16: ADP()@c1 + ATP_mit()@c2 -> ADP_mit()@c2 + ATP()@c1 k16
	v11b_reactants_0: 0  -> Ho()@c1 -1*(fRate18()) #Modifiers(hyd, N2, oxy)
	v11b_reactants_1: 0  -> ADP_mit()@c2 -1*(fRate18()) #Modifiers(hyd, N2, oxy)
	v11b_products_0: 0  -> Hm()@c2 fRate18() #Modifiers(hyd, N2, oxy)
	v11b_products_1: 0  -> ATP_mit()@c2 fRate18() #Modifiers(hyd, N2, oxy)
	vLEAK: Ho()@c1 -> Hm()@c2 0
	v12: ATP()@c1 -> ADP()@c1 k12
end reaction rules
end model
