###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000093', 'http://identifiers.org/biomodels.db/MODEL4879478021']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/12527385']
#@BQB_IS:['http://identifiers.org/obo.go/GO:0007259', 'http://identifiers.org/kegg.pathway/mmu04630']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/10090']
#@creatorEmail:'hdharuri@cds.caltech.edu'
#@creatorName:'Dharuri Harish'
#@notes:'This is a plain translation of an SBML model created on 14/08/2021. The original model has 34 molecules and 46 reactions. The translated model has 34 molecules and 46 rules'
###
begin model
begin parameters
	r1_kf 0.100000
	r1_kb 0.050000
	r2_kf 0.020000
	r2_kb 0.020000
	r3_kf 0.040000
	r3_kb 0.200000
	r4_kf 0.005000
	r5_kf 0.008000
	r5_kb 0.800000
	r6_kf 0.400000
	r7_kf 0.005000
	r7_kb 0.500000
	r8_kf 0.020000
	r8_kb 0.100000
	r9_kf 0.001000
	r9_kb 0.200000
	r10_kf 0.003000
	r11_kf 0.001000
	r11_kb 0.200000
	r12_kf 0.003000
	r13_kf 0.001000
	r13_kb 0.200000
	r14_kf 0.003000
	r15_kf 0.000000
	r15_kb 0.200000
	r16_kf 0.005000
	r17_kf 0.020000
	r17_kb 0.100000
	r18_kf 0.001000
	r18_kb 0.200000
	r19_kf 0.005000
	r20_kf 0.001000
	r20_kb 0.200000
	r21_kf 0.005000
	r22_kf 0.000000
	r22_kb 0.200000
	r23_kf 0.050000
	r24_ka 0.010000
	r24_kb 400.000000
	r25_kf 0.001000
	r26_kf 0.010000
	r27_kf 0.000500
	r28_kf 0.000500
	r29_kf 0.020000
	r29_kb 0.100000
	r30_kf 0.008000
	r30_kb 0.800000
	r31_kf 0.001000
	r31_kb 0.200000
	r32_kf 0.003000
	r33_kf 0.000500
	r34_kf 0.001000
	r34_kb 0.200000
	r35_kf 0.008000
	r35_kb 0.800000
	r36_kf 0.001000
	r36_kb 0.200000
	r37_kf 0.003000
	r38_kf 0.000500
	r39_kf 0.000500
	r40_kf 0.003000
	r41_kf 0.000500
	r42_kf 0.020000
	r42_kb 0.100000
	r43_kf 0.020000
	r43_kb 0.100000
	r44_kf 0.020000
	r44_kb 0.100000
	r45_kf 0.020000
	r45_kb 0.020000
	r46_kf 0.100000
	r46_kb 0.050000
end parameters
begin compartments
	#volume units: L
	cytoplasm 3 1.0
	nucleus 3 1.0
end compartments
begin molecule types
	IFNRJdimer()
	IFN()
	STAT1n()
	STAT1n_STAT1n_star()
	STAT1n_star_STAT1n_star()
	IFNRJ2_star_SHP2()
	IFNRJ2_star_SHP2_STAT1c()
	IFNRJ2_star_STAT1c()
	PPX()
	IFNRJ2_star_SHP2_SOCS1()
	STAT1n_star_PPN()
	Interferon_Receptor_JAKcomplex()
	PPN()
	IFNRJ2_star_STAT1c_star()
	STAT1c_star()
	ReceptorJAKcomplex()
	SOCS1()
	STAT1n_star()
	IFNRJ2_star_SHP2_SOCS1_STAT1c()
	STAT1n_star_STAT1n_star_PPN()
	IFNRJ2_star_SOCS1()
	IFNRJ2_star_SOCS1_STAT1c()
	STAT1c_STAT1c_star()
	STAT1c()
	SHP2()
	STAT1c_star_STAT1c_star_PPX()
	IFNR()
	mRNAn()
	JAK()
	STAT1c_star_STAT1c_star()
	STAT1c_star_PPX()
	mRNAc()
	ActivatedIFNRJcomplex()
	Receptor()
end molecule types
begin seed species
	@cytoplasm:Receptor() 6022000000000000.0 # (10.0 * 1e-09)mol/L * 6.022e23/mol *1.0L #Receptor #R
	@cytoplasm:JAK() 6022000000000000.0 #original 10.0nanomoles/L  #JAK #JAK
	@cytoplasm:STAT1c() 6.022000000000001e+17 #original 1000.0nanomoles/L  #STAT1c #STAT1c
	@cytoplasm:SHP2() 6.022000000000001e+16 #original 100.0nanomoles/L  #SHP2 #SHP2
	@cytoplasm:PPX() 3.0110000000000004e+16 #original 50.0nanomoles/L  #PPX #PPX
	@nucleus:PPN() 3.613200000000001e+16 #original 60.0nanomoles/L  #PPN #PPN
	@cytoplasm:$IFN() 6022000000000000.0 #original 10.0nanomoles/L  #IFN #IFN
end seed species
begin observables
	Species Receptor_cytoplasm @cytoplasm:Receptor() #Receptor
	Species JAK_cytoplasm @cytoplasm:JAK() #JAK
	Species ReceptorJAKcomplex_cytoplasm @cytoplasm:ReceptorJAKcomplex() #Receptor JAK complex
	Species Interferon_Receptor_JAKcomplex_cytoplasm @cytoplasm:Interferon_Receptor_JAKcomplex() #Interferon-Receptor-JAK complex
	Species IFNRJdimer_cytoplasm @cytoplasm:IFNRJdimer() #IFNRJ dimer
	Species ActivatedIFNRJcomplex_cytoplasm @cytoplasm:ActivatedIFNRJcomplex() #Activated IFNRJ complex
	Species STAT1c_cytoplasm @cytoplasm:STAT1c() #STAT1c
	Species IFNRJ2_star_STAT1c_cytoplasm @cytoplasm:IFNRJ2_star_STAT1c() #IFNRJ2_star_STAT1c
	Species STAT1c_star_cytoplasm @cytoplasm:STAT1c_star() #STAT1c_star
	Species IFNRJ2_star_STAT1c_star_cytoplasm @cytoplasm:IFNRJ2_star_STAT1c_star() #IFNRJ2_star_STAT1c_star
	Species STAT1c_star_STAT1c_star_cytoplasm @cytoplasm:STAT1c_star_STAT1c_star() #STAT1c_star_STAT1c_star
	Species SHP2_cytoplasm @cytoplasm:SHP2() #SHP2
	Species IFNRJ2_star_SHP2_cytoplasm @cytoplasm:IFNRJ2_star_SHP2() #IFNRJ2_star_SHP2
	Species PPX_cytoplasm @cytoplasm:PPX() #PPX
	Species STAT1c_star_PPX_cytoplasm @cytoplasm:STAT1c_star_PPX() #STAT1c_star_PPX
	Species STAT1c_STAT1c_star_cytoplasm @cytoplasm:STAT1c_STAT1c_star() #STAT1c_STAT1c_star
	Species STAT1n_star_STAT1n_star_nucleus @nucleus:STAT1n_star_STAT1n_star() #STAT1n_star_STAT1n_star
	Species STAT1n_star_nucleus @nucleus:STAT1n_star() #STAT1n_star
	Species PPN_nucleus @nucleus:PPN() #PPN
	Species STAT1n_star_PPN_nucleus @nucleus:STAT1n_star_PPN() #STAT1n_star_PPN
	Species STAT1n_nucleus @nucleus:STAT1n() #STAT1n
	Species STAT1n_STAT1n_star_nucleus @nucleus:STAT1n_STAT1n_star() #STAT1n_STAT1n_star
	Species mRNAn_nucleus @nucleus:mRNAn() #mRNAn
	Species mRNAc_cytoplasm @cytoplasm:mRNAc() #mRNAc
	Species SOCS1_cytoplasm @cytoplasm:SOCS1() #SOCS1
	Species IFNRJ2_star_SOCS1_cytoplasm @cytoplasm:IFNRJ2_star_SOCS1() #IFNRJ2_star_SOCS1
	Species IFNRJ2_star_SHP2_SOCS1_STAT1c_cytoplasm @cytoplasm:IFNRJ2_star_SHP2_SOCS1_STAT1c() #IFNRJ2_star_SHP2_SOCS1_STAT1c
	Species STAT1c_star_STAT1c_star_PPX_cytoplasm @cytoplasm:STAT1c_star_STAT1c_star_PPX() #STAT1c_star_STAT1c_star_PPX
	Species STAT1n_star_STAT1n_star_PPN_nucleus @nucleus:STAT1n_star_STAT1n_star_PPN() #STAT1n_star_STAT1n_star_PPN
	Species IFNRJ2_star_SOCS1_STAT1c_cytoplasm @cytoplasm:IFNRJ2_star_SOCS1_STAT1c() #IFNRJ2_star_SOCS1_STAT1c
	Species IFN_cytoplasm @cytoplasm:IFN() #IFN
	Species IFNRJ2_star_SHP2_STAT1c_cytoplasm @cytoplasm:IFNRJ2_star_SHP2_STAT1c() #IFNRJ2_star_SHP2_STAT1c
	Species IFNRJ2_star_SHP2_SOCS1_cytoplasm @cytoplasm:IFNRJ2_star_SHP2_SOCS1() #IFNRJ2_star_SHP2_SOCS1
	Species IFNR_cytoplasm @cytoplasm:IFNR() #IFNR
end observables
begin functions
	fRate23() = 0.01*STAT1n_star_STAT1n_star_nucleus/(STAT1n_star_STAT1n_star_nucleus + 400.0)
	fRate25() = 0.01*mRNAc_cytoplasm
end functions
begin reaction rules
	v1: JAK()@cytoplasm + Receptor()@cytoplasm <-> ReceptorJAKcomplex()@cytoplasm r1_kf,r1_kb
	v2: ReceptorJAKcomplex()@cytoplasm + IFN()@cytoplasm <-> Interferon_Receptor_JAKcomplex()@cytoplasm r2_kf,r2_kb
	v3: Interferon_Receptor_JAKcomplex()@cytoplasm + Interferon_Receptor_JAKcomplex()@cytoplasm <-> IFNRJdimer()@cytoplasm r3_kf,r3_kb
	v4: IFNRJdimer()@cytoplasm -> ActivatedIFNRJcomplex()@cytoplasm r4_kf
	v5: ActivatedIFNRJcomplex()@cytoplasm + STAT1c()@cytoplasm <-> IFNRJ2_star_STAT1c()@cytoplasm r5_kf,r5_kb
	v6: IFNRJ2_star_STAT1c()@cytoplasm -> STAT1c_star()@cytoplasm + ActivatedIFNRJcomplex()@cytoplasm r6_kf
	v7: STAT1c_star()@cytoplasm + ActivatedIFNRJcomplex()@cytoplasm <-> IFNRJ2_star_STAT1c_star()@cytoplasm r7_kf,r7_kb
	v8: STAT1c_star()@cytoplasm + STAT1c_star()@cytoplasm <-> STAT1c_star_STAT1c_star()@cytoplasm r8_kf,r8_kb
	v9: SHP2()@cytoplasm + ActivatedIFNRJcomplex()@cytoplasm <-> IFNRJ2_star_SHP2()@cytoplasm r9_kf,r9_kb
	v10: IFNRJ2_star_SHP2()@cytoplasm -> SHP2()@cytoplasm + IFNRJdimer()@cytoplasm r10_kf
	v11: STAT1c_star()@cytoplasm + PPX()@cytoplasm <-> STAT1c_star_PPX()@cytoplasm r11_kf,r11_kb
	v12: STAT1c_star_PPX()@cytoplasm -> STAT1c()@cytoplasm + PPX()@cytoplasm r12_kf
	v13: STAT1c_star_STAT1c_star()@cytoplasm + PPX()@cytoplasm <-> STAT1c_star_STAT1c_star_PPX()@cytoplasm r13_kf,r13_kb
	v14: STAT1c_star_STAT1c_star_PPX()@cytoplasm -> STAT1c_STAT1c_star()@cytoplasm + PPX()@cytoplasm r14_kf
	v15: STAT1c_star()@cytoplasm + STAT1c()@cytoplasm <-> STAT1c_STAT1c_star()@cytoplasm r15_kf,r15_kb
	v16: STAT1c_star_STAT1c_star()@cytoplasm -> STAT1n_star_STAT1n_star()@nucleus r16_kf
	v17: STAT1n_star()@nucleus + STAT1n_star()@nucleus <-> STAT1n_star_STAT1n_star()@nucleus r17_kf,r17_kb
	v18: STAT1n_star()@nucleus + PPN()@nucleus <-> STAT1n_star_PPN()@nucleus r18_kf,r18_kb
	v19: STAT1n_star_PPN()@nucleus -> STAT1n()@nucleus + PPN()@nucleus r19_kf
	v20: STAT1n_star_STAT1n_star()@nucleus + PPN()@nucleus <-> STAT1n_star_STAT1n_star_PPN()@nucleus r20_kf,r20_kb
	v21: STAT1n_star_STAT1n_star_PPN()@nucleus -> STAT1n_STAT1n_star()@nucleus + PPN()@nucleus r21_kf
	v22: STAT1n_star()@nucleus + STAT1n()@nucleus <-> STAT1n_STAT1n_star()@nucleus r22_kf,r22_kb
	v23: STAT1n()@nucleus -> STAT1c()@cytoplasm r23_kf
	v24: 0  -> mRNAn()@nucleus fRate23() #Modifiers(STAT1n_star_STAT1n_star)
	v25: mRNAn()@nucleus -> mRNAc()@cytoplasm r25_kf
	v26: 0  -> SOCS1()@cytoplasm fRate25() #Modifiers(mRNAc)
	v27: mRNAc()@cytoplasm -> 0  r27_kf
	v28: SOCS1()@cytoplasm -> 0  r28_kf
	v29: ActivatedIFNRJcomplex()@cytoplasm + SOCS1()@cytoplasm <-> IFNRJ2_star_SOCS1()@cytoplasm r29_kf,r29_kb
	v30: IFNRJ2_star_SOCS1()@cytoplasm + STAT1c()@cytoplasm <-> IFNRJ2_star_SOCS1_STAT1c()@cytoplasm r30_kf,r30_kb
	v31: IFNRJ2_star_SOCS1_STAT1c()@cytoplasm + SHP2()@cytoplasm <-> IFNRJ2_star_SHP2_SOCS1_STAT1c()@cytoplasm r31_kf,r31_kb
	v32: IFNRJ2_star_SHP2_SOCS1_STAT1c()@cytoplasm -> IFNRJdimer()@cytoplasm + SOCS1()@cytoplasm + STAT1c()@cytoplasm + SHP2()@cytoplasm r32_kf
	v33: IFNRJ2_star_SHP2_SOCS1_STAT1c()@cytoplasm -> IFNRJ2_star_SHP2_STAT1c()@cytoplasm r33_kf
	v34: IFNRJ2_star_SOCS1()@cytoplasm + SHP2()@cytoplasm <-> IFNRJ2_star_SHP2_SOCS1()@cytoplasm r34_kf,r34_kb
	v35: IFNRJ2_star_SHP2_SOCS1()@cytoplasm + STAT1c()@cytoplasm <-> IFNRJ2_star_SHP2_SOCS1_STAT1c()@cytoplasm r35_kf,r35_kb
	v36: IFNRJ2_star_STAT1c()@cytoplasm + SHP2()@cytoplasm <-> IFNRJ2_star_SHP2_STAT1c()@cytoplasm r36_kf,r36_kb
	v37: IFNRJ2_star_SHP2_STAT1c()@cytoplasm -> STAT1c()@cytoplasm + SHP2()@cytoplasm + IFNRJdimer()@cytoplasm r37_kf
	v38: IFNRJ2_star_SOCS1_STAT1c()@cytoplasm -> IFNRJ2_star_STAT1c()@cytoplasm r38_kf
	v39: IFNRJ2_star_SHP2_SOCS1()@cytoplasm -> IFNRJ2_star_SHP2()@cytoplasm r39_kf
	v40: IFNRJ2_star_SHP2_SOCS1()@cytoplasm -> SHP2()@cytoplasm + IFNRJdimer()@cytoplasm + SOCS1()@cytoplasm r40_kf
	v41: IFNRJ2_star_SOCS1()@cytoplasm -> ActivatedIFNRJcomplex()@cytoplasm r41_kf
	v42: IFNRJ2_star_STAT1c()@cytoplasm + SOCS1()@cytoplasm <-> IFNRJ2_star_SOCS1_STAT1c()@cytoplasm r42_kf,r42_kb
	v43: IFNRJ2_star_SHP2()@cytoplasm + SOCS1()@cytoplasm <-> IFNRJ2_star_SHP2_SOCS1()@cytoplasm r43_kf,r43_kb
	v44: IFNRJ2_star_SHP2_STAT1c()@cytoplasm + SOCS1()@cytoplasm <-> IFNRJ2_star_SHP2_SOCS1_STAT1c()@cytoplasm r44_kf,r44_kb
	v45: Receptor()@cytoplasm + IFN()@cytoplasm <-> IFNR()@cytoplasm r45_kf,r45_kb
	v46: JAK()@cytoplasm + IFNR()@cytoplasm <-> Interferon_Receptor_JAKcomplex()@cytoplasm r46_kf,r46_kb
end reaction rules
end model
