###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL2977476330', 'http://identifiers.org/biomodels.db/BIOMD0000000122']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/17031595']
#@BQB_OCCURS_IN:['http://identifiers.org/bto/BTO:0000782']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/40674']
#@BQB_IS:['http://identifiers.org/go/GO:0033173']
#@BQB_IS_PART_OF:['http://identifiers.org/kegg.pathway/hsa04660']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0002709']
#@creatorEmail:'hdharuri@cds.caltech.edu'
#@creatorName:'Dharuri Harish'
#@notes:'This is a plain translation of an SBML model created on 13/08/2021. The original model has 14 molecules and 17 reactions. The translated model has 14 molecules and 27 rules'
###
begin model
begin parameters
	k1 2.56e-05
	k2 0.00256
	k16 6.63
	k15 0.00168
	k18 0.00096
	k17 0.0015
	k6 0.00092
	k5 0.0019
	k14 0.00256
	k13 0.5
	k12 0.00168
	k11 6.63
	k10 0.005
	k9 0.5
	k3 0.005
	k4 0.5
	k7 0.005
	k8 0.5
	k19 1.0
	k20 1.0
	k21 0.21
	k22 0.5
	Time_in_Seconds 100.0
end parameters
begin compartments
	#volume units: L
	cytosol 3 2.69e-13
	nucleus 3 1.13e-13
end compartments
begin molecule types
	CalciuminNucleus()
	InactiveCalcineurininnucleus()
	NFAT_Cyt()
	NFATCalcineurincomplexincytosol()
	InactiveCalcineurinincytosol()
	ActiveCalcineurininNucleus()
	NFATCalcineurincomplexinnucleus()
	PhosphorylatedNFATCalcineurincomplexincytosol()
	ActiveCalcineurinincytosol()
	PhosphorylatedNFATincytosol()
	NFAT_nuc()
	PhosphorylatedNFATinnucleus()
	CalciuminCytosol()
	PhosphorylatedNFATCalcineurincomplexinnucleus()
end molecule types
begin seed species
	@nucleus:CalciuminNucleus() 68048.6 # (1.0 * 1e-06)mol/L * 6.022e23/mol *1.13e-13L #CalciuminNucleus #Ca_Nuc
	@cytosol:CalciuminCytosol() 161991.80000000002 #original 1.0micro mole/L  #CalciuminCytosol #Ca_Cyt
	@nucleus:NFAT_nuc() 35.51456434 #original 0.0005219micro mole/L  #NFAT_nuc #NFAT_Nuc
	@nucleus:ActiveCalcineurininNucleus() 3.4364543 #original 5.05e-05micro mole/L  #ActiveCalcineurininNucleus #Act_C_Nuc
	@nucleus:PhosphorylatedNFATinnucleus() 15.460641919999999 #original 0.0002272micro mole/L  #PhosphorylatedNFATinnucleus #NFAT_Pi_Nuc
	@nucleus:NFATCalcineurincomplexinnucleus() 64.48965822 #original 0.0009477micro mole/L  #NFATCalcineurincomplexinnucleus #NFAT_Act_C_Nuc
	@nucleus:PhosphorylatedNFATCalcineurincomplexinnucleus() 0.17012150000000004 #original 2.5e-06micro mole/L  #PhosphorylatedNFATCalcineurincomplexinnucleus #NFAT_Pi_Act_C_Nuc
	@nucleus:InactiveCalcineurininnucleus() 3347.8550228 #original 0.049198micro mole/L  #InactiveCalcineurininnucleus #Inact_C_Nuc
	@cytosol:NFAT_Cyt() 17.83529718 #original 0.0001101micro mole/L  #NFAT_Cyt #NFAT_Cyt
	@cytosol:ActiveCalcineurinincytosol() 1.47412538 #original 9.1e-06micro mole/L  #ActiveCalcineurinincytosol #Act_C_Cyt
	@cytosol:PhosphorylatedNFATincytosol() 1529.1539944600004 #original 0.0094397micro mole/L  #PhosphorylatedNFATincytosol #NFAT_Pi_Cyt
	@cytosol:NFATCalcineurincomplexincytosol() 0.9881499800000001 #original 6.1e-06micro mole/L  #NFATCalcineurincomplexincytosol #NFAT_Act_C_Cyt
	@cytosol:PhosphorylatedNFATCalcineurincomplexincytosol() 0.35638196 #original 2.2e-06micro mole/L  #PhosphorylatedNFATCalcineurincomplexincytosol #NFAT_Pi_Act_C_Cyt
	@cytosol:InactiveCalcineurinincytosol() 1573.06997144 #original 0.0097108micro mole/L  #InactiveCalcineurinincytosol #Inact_C_Cyt
end seed species
begin observables
	Species CalciuminNucleus_nucleus @nucleus:CalciuminNucleus() #Calcium in Nucleus
	Species CalciuminCytosol_cytosol @cytosol:CalciuminCytosol() #Calcium in Cytosol
	Species NFAT_nuc_nucleus @nucleus:NFAT_nuc() #NFAT_nuc
	Species ActiveCalcineurininNucleus_nucleus @nucleus:ActiveCalcineurininNucleus() #Active Calcineurin in Nucleus
	Species PhosphorylatedNFATinnucleus_nucleus @nucleus:PhosphorylatedNFATinnucleus() #Phosphorylated NFAT in nucleus
	Species NFATCalcineurincomplexinnucleus_nucleus @nucleus:NFATCalcineurincomplexinnucleus() #NFAT Calcineurin complex in nucleus
	Species PhosphorylatedNFATCalcineurincomplexinnucleus_nucleus @nucleus:PhosphorylatedNFATCalcineurincomplexinnucleus() #Phosphorylated NFAT Calcineurin complex in nucleus
	Species InactiveCalcineurininnucleus_nucleus @nucleus:InactiveCalcineurininnucleus() #Inactive Calcineurin in nucleus
	Species NFAT_Cyt_cytosol @cytosol:NFAT_Cyt() #NFAT_Cyt
	Species ActiveCalcineurinincytosol_cytosol @cytosol:ActiveCalcineurinincytosol() #Active Calcineurin in cytosol
	Species PhosphorylatedNFATincytosol_cytosol @cytosol:PhosphorylatedNFATincytosol() #Phosphorylated NFAT in cytosol
	Species NFATCalcineurincomplexincytosol_cytosol @cytosol:NFATCalcineurincomplexincytosol() #NFAT Calcineurin complex in cytosol
	Species PhosphorylatedNFATCalcineurincomplexincytosol_cytosol @cytosol:PhosphorylatedNFATCalcineurincomplexincytosol() #Phosphorylated NFAT Calcineurin complex in cytosol
	Species InactiveCalcineurinincytosol_cytosol @cytosol:InactiveCalcineurinincytosol() #Inactive Calcineurin in cytosol
end observables
begin functions
	fRate0() = -NFAT_nuc_nucleus*k2 + PhosphorylatedNFATinnucleus_nucleus*k1
	fRate2() = 3717472118959.11*k18
	fRate2m() = 8849557522123.89*k17
	fRate3() = 3717472118959.11*k6
	fRate3m() = 8849557522123.89*k5
	fRate6() = 3717472118959.11*k10
	fRate6m() = 8849557522123.89*k9
	fRate9() = 8849557522123.89*k3
	fRate9m() = 3717472118959.11*k4
	fRate11() = 8849557522123.89*k7
	fRate11m() = 3717472118959.11*k8
	fRate12() = -NFAT_Cyt_cytosol*k2 + PhosphorylatedNFATincytosol_cytosol*k1
	fRate13() = -ActiveCalcineurinincytosol_cytosol*k20 + CalciuminCytosol_cytosol^3*InactiveCalcineurinincytosol_cytosol*k19
	fRate14() = -ActiveCalcineurininNucleus_nucleus*k20 + CalciuminNucleus_nucleus^3*InactiveCalcineurininnucleus_nucleus*k19
	fRate15() = 8849557522123.89*k5
	fRate15m() = 3717472118959.11*k6
	fRate16() = 8849557522123.89*k21
	fRate16m() = 3717472118959.11*k22
end functions
begin reaction rules
	R1_reactants_0: 0  -> PhosphorylatedNFATinnucleus()@nucleus -1*(fRate0())
	R1_reactants_1: 0  -> ActiveCalcineurininNucleus()@nucleus -1*(fRate0())
	R1_products_0: 0  -> ActiveCalcineurininNucleus()@nucleus fRate0()
	R1_products_1: 0  -> NFAT_nuc()@nucleus fRate0()
	R2: ActiveCalcineurininNucleus()@nucleus + NFAT_nuc()@nucleus <-> NFATCalcineurincomplexinnucleus()@nucleus k16,k15
	R3: NFAT_nuc()@nucleus <-> NFAT_Cyt()@cytosol fRate2(),fRate2m()
	R4: ActiveCalcineurininNucleus()@nucleus <-> ActiveCalcineurinincytosol()@cytosol fRate3(),fRate3m()
	R5: NFATCalcineurincomplexinnucleus()@nucleus <-> PhosphorylatedNFATCalcineurincomplexinnucleus()@nucleus k14,k13
	R6: PhosphorylatedNFATCalcineurincomplexinnucleus()@nucleus <-> ActiveCalcineurininNucleus()@nucleus + PhosphorylatedNFATinnucleus()@nucleus k12,k11
	R7: NFATCalcineurincomplexinnucleus()@nucleus <-> NFATCalcineurincomplexincytosol()@cytosol fRate6(),fRate6m()
	R8: NFATCalcineurincomplexincytosol()@cytosol <-> PhosphorylatedNFATCalcineurincomplexincytosol()@cytosol k14,k13
	R9: PhosphorylatedNFATCalcineurincomplexincytosol()@cytosol <-> ActiveCalcineurinincytosol()@cytosol + PhosphorylatedNFATincytosol()@cytosol k12,k11
	R10: PhosphorylatedNFATincytosol()@cytosol <-> PhosphorylatedNFATinnucleus()@nucleus fRate9(),fRate9m()
	R11: NFATCalcineurincomplexincytosol()@cytosol <-> ActiveCalcineurinincytosol()@cytosol + NFAT_Cyt()@cytosol k15,k16
	R17: PhosphorylatedNFATCalcineurincomplexincytosol()@cytosol <-> PhosphorylatedNFATCalcineurincomplexinnucleus()@nucleus fRate11(),fRate11m()
	R12_reactants_0: 0  -> PhosphorylatedNFATincytosol()@cytosol -1*(fRate12())
	R12_reactants_1: 0  -> ActiveCalcineurinincytosol()@cytosol -1*(fRate12())
	R12_products_0: 0  -> ActiveCalcineurinincytosol()@cytosol fRate12()
	R12_products_1: 0  -> NFAT_Cyt()@cytosol fRate12()
	R13_reactants_0: 0  -> CalciuminCytosol()@cytosol -1*3.0*(fRate13())
	R13_reactants_1: 0  -> InactiveCalcineurinincytosol()@cytosol -1*(fRate13())
	R13_products_0: 0  -> ActiveCalcineurinincytosol()@cytosol fRate13()
	R14_reactants_0: 0  -> CalciuminNucleus()@nucleus -1*3.0*(fRate14())
	R14_reactants_1: 0  -> InactiveCalcineurininnucleus()@nucleus -1*(fRate14())
	R14_products_0: 0  -> ActiveCalcineurininNucleus()@nucleus fRate14()
	R15: InactiveCalcineurinincytosol()@cytosol <-> InactiveCalcineurininnucleus()@nucleus fRate15(),fRate15m()
	R16: CalciuminCytosol()@cytosol <-> CalciuminNucleus()@nucleus fRate16(),fRate16m()
end reaction rules
end model
