###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000137', 'http://identifiers.org/biomodels.db/MODEL6526728774']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/12376338']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/pubmed/8304439', 'http://identifiers.org/biomodels.db/MODEL1201140005', 'http://identifiers.org/pubmed/1890848', 'http://identifiers.org/biomodels.db/MODEL1201140006', 'http://identifiers.org/pubmed/1890850']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_IS_PART_OF:['http://identifiers.org/go/GO:0008286', 'http://identifiers.org/kegg.pathway/hsa04910']
#@BQB_HAS_PROPERTY:['http://identifiers.org/doid/DOID:9351']
#@creatorEmail:'hdharuri@cds.caltech.edu'
#@creatorName:'Dharuri Harish'
#@notes:'This is a plain translation of an SBML model created on 14/08/2021. The original model has 21 molecules and 20 reactions. The translated model has 20 molecules and 22 rules'
###
begin model
begin parameters
	k1 6e-08
	kminus1 0.2
	k2 6e-08
	kminus2 20.0
	k3 2500.0
	kminus3 0.2
	k4 0.00033333334
	kminus4 0.003
	k4prime 0.0021
	kminus4prime 0.00021
	kminus5 1.67e-18
	k6 0.461
	k7 4.16
	kminus7 1.396
	k8 0.000706
	kminus8 10.0
	k9_stimulated 1.39
	k9_basal 0.13145
	kminus9 42.15
	k10 2.961
	kminus10 2.77
	kminus11 6.9315
	kminus12 6.9315
	k13 0.00696
	kminus13 0.167
	k14 0.11088
	kminus14 0.001155
	IRp 897.0
	SHIP 1.0
	PTEN 1.0
	PTP 1.0
	APequil 9.09091
	PI3K 5.0
	k5 0
	Insulin_CellSurface 6.022000000000001e+16 # (100000000.0 * 1e-15)mol/L * 6.022e23/mol *1.0L
	Insulin 6.022000000000001e+16 # (100000000.0 * 1e-15)mol/L * 6.022e23/mol *1.0L
end parameters
begin compartments
	#volume units: L
	CellSurface 3 1.0
	Intracellular 3 1.0
end compartments
begin molecule types
	ActivatedAkt()
	PI3_4P2()
	UnboundInsulinReceptor()
	PI3Kinase()
	PI4_5P2()
	Phosphorylatedonceboundreceptor()
	IntracellularGLUT4()
	ActivatedPKC()
	Phosphorylatedtwiceboundreceptor()
	IRS1_PI3KinaseComplex()
	UnphosphorylatedIRS1()
	UnactivatedAkt()
	Unphosphorylatedonceboundreceptor()
	Unboundunphosphorylatedintracellularreceptor()
	Phosphorylatedtwiceboundintracellularreceptor()
	PI3_4_5P3()
	UnactivatedPKC()
	PhosphorylatedIRS1()
	CellsurfaceGLUT4()
	Phosphorylatedonceboundintracellularreceptor()
end molecule types
begin seed species
	@CellSurface:UnboundInsulinReceptor() 541980000000.00006 #original 900.0femtomole/L #UnboundInsulinReceptor #x2
	@Intracellular:Unboundunphosphorylatedintracellularreceptor() 60220000000.00001 #original 100.0femtomole/L #Unboundunphosphorylatedintracellularreceptor #x6
	@Intracellular:UnphosphorylatedIRS1() 602200000000.0 #original 1000.0femtomole/L #UnphosphorylatedIRS1 #x9
	@Intracellular:PI3Kinase() 60220000000.00001 #original 100.0femtomole/L #PI3Kinase #x11
	@Intracellular:PI3_4_5P3() 186682000.0 #original 0.31femtomole/L #PI3_4_5P3 #x13
	@Intracellular:PI4_5P2() 59858680000.00001 #original 99.4femtomole/L #PI4_5P2 #x14
	@Intracellular:PI3_4P2() 174638000.0 #original 0.29femtomole/L #PI3_4P2 #x15
	@Intracellular:UnactivatedAkt() 60220000000.00001 #original 100.0femtomole/L #UnactivatedAkt #x16
	@Intracellular:UnactivatedPKC() 60220000000.00001 #original 100.0femtomole/L #UnactivatedPKC #x18
	@Intracellular:IntracellularGLUT4() 57811200000.00001 #original 96.0femtomole/L #IntracellularGLUT4 #x20
	@CellSurface:CellsurfaceGLUT4() 2408800000.0000005 #original 4.0femtomole/L #CellsurfaceGLUT4 #x21
end seed species
begin observables
	Species UnboundInsulinReceptor_CellSurface @CellSurface:UnboundInsulinReceptor() #Unbound Insulin Receptor
	Species Unphosphorylatedonceboundreceptor_CellSurface @CellSurface:Unphosphorylatedonceboundreceptor() #Unphosphorylated once bound receptor
	Species Phosphorylatedonceboundreceptor_CellSurface @CellSurface:Phosphorylatedonceboundreceptor() #Phosphorylated once bound receptor
	Species Phosphorylatedtwiceboundreceptor_CellSurface @CellSurface:Phosphorylatedtwiceboundreceptor() #Phosphorylated twice bound receptor
	Species Unboundunphosphorylatedintracellularreceptor_Intracellular @Intracellular:Unboundunphosphorylatedintracellularreceptor() #Unbound unphosphorylated intracellular receptor
	Species Phosphorylatedtwiceboundintracellularreceptor_Intracellular @Intracellular:Phosphorylatedtwiceboundintracellularreceptor() #Phosphorylated twice bound intracellular receptor
	Species Phosphorylatedonceboundintracellularreceptor_Intracellular @Intracellular:Phosphorylatedonceboundintracellularreceptor() #Phosphorylated once bound intracellular receptor
	Species UnphosphorylatedIRS1_Intracellular @Intracellular:UnphosphorylatedIRS1() #Unphosphorylated IRS1
	Species PhosphorylatedIRS1_Intracellular @Intracellular:PhosphorylatedIRS1() #Phosphorylated IRS1
	Species PI3Kinase_Intracellular @Intracellular:PI3Kinase() #PI3 Kinase
	Species IRS1_PI3KinaseComplex_Intracellular @Intracellular:IRS1_PI3KinaseComplex() #IRS1- PI3 Kinase Complex
	Species PI3_4_5P3_Intracellular @Intracellular:PI3_4_5P3() #PI3,4,5P3
	Species PI4_5P2_Intracellular @Intracellular:PI4_5P2() #PI4,5P2
	Species PI3_4P2_Intracellular @Intracellular:PI3_4P2() #PI3,4P2
	Species UnactivatedAkt_Intracellular @Intracellular:UnactivatedAkt() #Unactivated Akt
	Species ActivatedAkt_Intracellular @Intracellular:ActivatedAkt() #Activated Akt
	Species UnactivatedPKC_Intracellular @Intracellular:UnactivatedPKC() #Unactivated PKC
	Species ActivatedPKC_Intracellular @Intracellular:ActivatedPKC() #Activated PKC
	Species IntracellularGLUT4_Intracellular @Intracellular:IntracellularGLUT4() #Intracellular GLUT4
	Species CellsurfaceGLUT4_CellSurface @CellSurface:CellsurfaceGLUT4() #Cell surface GLUT4
end observables
begin functions
	Effect() = (0.2*ActivatedAkt_Intracellular + 0.8*ActivatedPKC_Intracellular)/APequil
	k13prime() = 5*Effect*kminus13/8
	x4x5() = Phosphorylatedonceboundreceptor_CellSurface + Phosphorylatedtwiceboundreceptor_CellSurface
	k12() = 0.03584229390681*kminus12*(PI3_4_5P3_Intracellular - 0.31)
	k11() = 0.03584229390681*kminus11*(PI3_4_5P3_Intracellular - 0.31)
	k9() = IRS1_PI3KinaseComplex_Intracellular*(k9_basal + k9_stimulated)/PI3K + k9_basal
	fRate0() = Insulin_CellSurface*k1
	fRate2() = Insulin_CellSurface*k2
	fRate2m() = 1.0*kminus2
	fRate3() = PTP*kminus3
	fRate9() = PTP*k6
	fRate10() = PTP*k6
	fRate11() = -PTP*PhosphorylatedIRS1_Intracellular*kminus7 + UnphosphorylatedIRS1_Intracellular*k7*(Phosphorylatedonceboundreceptor_CellSurface + Phosphorylatedtwiceboundreceptor_CellSurface)/IRp
	fRate13m() = PTEN*kminus9
	fRate14m() = SHIP*kminus10
	fRate19() = -CellsurfaceGLUT4_CellSurface*kminus13 + IntracellularGLUT4_Intracellular*(k13 + k13prime)
end functions
begin reaction rules
	R1: UnboundInsulinReceptor()@CellSurface <-> Unphosphorylatedonceboundreceptor()@CellSurface fRate0(),kminus1 #Modifiers(x1)
	R2: Unphosphorylatedonceboundreceptor()@CellSurface -> Phosphorylatedonceboundreceptor()@CellSurface k3
	R3: Phosphorylatedonceboundreceptor()@CellSurface <-> Phosphorylatedtwiceboundreceptor()@CellSurface fRate2(),fRate2m() #Modifiers(x1)
	R4: Phosphorylatedonceboundreceptor()@CellSurface -> UnboundInsulinReceptor()@CellSurface fRate3()
	R5: UnboundInsulinReceptor()@CellSurface <-> Unboundunphosphorylatedintracellularreceptor()@Intracellular k4,kminus4
	R6: Phosphorylatedtwiceboundreceptor()@CellSurface <-> Phosphorylatedtwiceboundintracellularreceptor()@Intracellular k4prime,kminus4prime
	R7: Phosphorylatedonceboundreceptor()@CellSurface <-> Phosphorylatedonceboundintracellularreceptor()@Intracellular k4prime,kminus4prime
	R8: 0  -> Unboundunphosphorylatedintracellularreceptor()@Intracellular k5
	R9: Unboundunphosphorylatedintracellularreceptor()@Intracellular -> 0  kminus5
	R10: Phosphorylatedtwiceboundintracellularreceptor()@Intracellular -> Unboundunphosphorylatedintracellularreceptor()@Intracellular fRate9()
	R11: Phosphorylatedonceboundintracellularreceptor()@Intracellular -> Unboundunphosphorylatedintracellularreceptor()@Intracellular fRate10()
	R12_reactants_0: 0  -> UnphosphorylatedIRS1()@Intracellular -1*(fRate11()) #Modifiers(x4, x5)
	R12_products_0: 0  -> PhosphorylatedIRS1()@Intracellular fRate11() #Modifiers(x4, x5)
	R13: PI3Kinase()@Intracellular + PhosphorylatedIRS1()@Intracellular <-> IRS1_PI3KinaseComplex()@Intracellular k8,kminus8
	R14: PI4_5P2()@Intracellular <-> PI3_4_5P3()@Intracellular k9,fRate13m()
	R15: PI3_4P2()@Intracellular <-> PI3_4_5P3()@Intracellular k10,fRate14m()
	R16: UnactivatedAkt()@Intracellular <-> ActivatedAkt()@Intracellular k11,kminus11
	R17: UnactivatedPKC()@Intracellular <-> ActivatedPKC()@Intracellular k12,kminus12
	R18: 0  -> IntracellularGLUT4()@Intracellular k14
	R19: IntracellularGLUT4()@Intracellular -> 0  kminus14
	R20_reactants_0: 0  -> IntracellularGLUT4()@Intracellular -1*(fRate19())
	R20_products_0: 0  -> CellsurfaceGLUT4()@CellSurface fRate19()
end reaction rules
end model
