###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000146', 'http://identifiers.org/biomodels.db/MODEL8256371999']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/12691603']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/biomodels.db/BIOMD0000000048', 'http://identifiers.org/biomodels.db/BIOMD0000000019', 'http://identifiers.org/biomodels.db/BIOMD0000000010', 'http://identifiers.org/pubmed/11772030']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/10026']
#@BQB_HAS_PART:['http://identifiers.org/go/GO:0043405', 'http://identifiers.org/go/GO:0051896']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0038127']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046']
#@creatorEmail:'enuo.he@wolfson.ox.ac.uk'
#@creatorName:'He Enuo'
#@notes:'This is a plain translation of an SBML model created on 13/08/2021. The original model has 36 molecules and 34 reactions. The translated model has 33 molecules and 35 rules'
###
begin model
begin parameters
	k1 0.0012
	k2 0.01
	k3 1.0
	k5 0.1
	k6 20.0
	k7 60.0
	k8 2040.0
	k9 40.8
	V10 0.0154
	k11 0.222
	V12 0.289
	k13 1.53
	k14 0.00673
	k15 3.5
	k16 0.058
	k17 2.9
	k20 0.3
	k18 0.058
	k19 9.5
	k21 16.0
	k22 0.27
	k23 0.1
	k24 9.85
	k25 45.8
	k27 16.9
	V26 2620.0
	V28 17000.0
	k29 507.0
	V30 20000.0
	k31 0.107
	V32 20000.0
	k33 0.211
	k34 0.001
	k_1 0.00076
	k_2 0.1
	k_3 0.01
	K4 50.0
	k_5 1.0
	k_6 5.0
	k_7 546.0
	k_8 15700.0
	K10 340.0
	K11 0.181
	K12 0.0571
	K13 11.7
	K14 8.07
	K15 317.0
	K18 60.0
	K19 146000.0
	K20 160.0
	K21 146000.0
	K22 60.0
	k_23 2.0
	k_24 0.0985
	k_25 0.047
	K26 3680.0
	K27 39.1
	K28 9.02
	K30 80000.0
	K31 4.35
	K32 80000.0
	K33 12.0
	V4 62.5
	K17 317.0
	K16 2200.0
	k_29 234.0
	k_9 0
	k_34 0
	E 4215400000000000.5 #original 7.0nM/L
	MKP3 1445280000000000.0 #original 2.4nM/L
	PP2A 6865080000000001.0 #original 11.4nM/L
end parameters
begin molecule types
	ERKPP()
	internalization()
	HRG()
	MEKPP()
	Rafstar()
	RasGTP()
	ShP()
	RHRG2()
	RShP()
	RP()
	PIP3()
	RPI3Kstar()
	GS()
	RShGS()
	PI3Kstar()
	RasGDP()
	MEKP()
	ShGS()
	Raf()
	PI3K()
	RShc()
	RHRG()
	R()
	MEK()
	AktPIP()
	Shc()
	ERKP()
	Akt()
	P_I()
	RPI3K()
	AktPIPP()
	AktPIP3()
	ERK()
end molecule types
begin seed species
	Akt() 6022000000000000.0 # (10.0 * 1e-09)mol/L * 6.022e23/mol *1.0L #Akt #Akt
	ERK() 6.022000000000001e+17 #original 1000.0nM/L #ERK #ERK
	GS() 6022000000000000.0 #original 10.0nM/L #GS #GS
	HRG() 1.9872600000000003e+17 #original 330.0nM/L #HRG #HRG
	MEK() 7.226400000000002e+16 #original 120.0nM/L #MEK #MEK
	PI3K() 6022000000000000.0 #original 10.0nM/L #PI3K #PI3K
	R() 4.8176e+16 #original 80.0nM/L #R #R
	Raf() 6.022000000000001e+16 #original 100.0nM/L #Raf #Raf
	RasGDP() 7.226400000000002e+16 #original 120.0nM/L #RasGDP #RasGDP
	Shc() 6.022000000000001e+17 #original 1000.0nM/L #Shc #Shc
	P_I() 4.8176000000000006e+17 #original 800.0nM/L #P_I #P_I
end seed species
begin observables
	Species Akt Akt() #Akt
	Species AktPIP3 AktPIP3() #AktPIP3
	Species AktPIP AktPIP() #AktPIP
	Species AktPIPP AktPIPP() #AktPIPP
	Species ERK ERK() #ERK
	Species ERKP ERKP() #ERKP
	Species ERKPP ERKPP() #ERKPP
	Species GS GS() #GS
	Species HRG HRG() #HRG
	Species MEK MEK() #MEK
	Species MEKP MEKP() #MEKP
	Species MEKPP MEKPP() #MEKPP
	Species PI3K PI3K() #PI3K
	Species PI3Kstar PI3Kstar() #PI3Kstar
	Species PIP3 PIP3() #PIP3
	Species R R() #R
	Species RP RP() #RP
	Species RHRG RHRG() #RHRG
	Species RHRG2 RHRG2() #RHRG2
	Species RPI3K RPI3K() #RPI3K
	Species RPI3Kstar RPI3Kstar() #RPI3Kstar
	Species RShGS RShGS() #RShGS
	Species RShP RShP() #RShP
	Species RShc RShc() #RShc
	Species Raf Raf() #Raf
	Species Rafstar Rafstar() #Rafstar
	Species RasGDP RasGDP() #RasGDP
	Species RasGTP RasGTP() #RasGTP
	Species ShGS ShGS() #ShGS
	Species ShP ShP() #ShP
	Species Shc Shc() #Shc
	Species P_I P_I() #P_I
	Species internalization internalization() #internalization
end observables
begin functions
	Rafstar_percent() = Rafstar
	PI3Kstar_percent() = 10*PI3Kstar
	ShP_percent() = ShP/10
	MEKPP_percent() = 5*MEKPP/6
	AktPP_percent() = 10*AktPIPP
	ERKPP_percent() = ERKPP/10
	RP_percent() = 5*RP/2 + 5*RPI3K/2 + 5*RPI3Kstar/2 + 5*RShGS/2 + 5*RShP/2 + 5*RShc/2
	fRate3() = V4/(K4 + RP)
	fRate9() = V10/(K10 + ShP)
	fRate10() = ShGS*k11/(K11 + RasGDP)
	fRate11() = V12/(K12 + RasGTP)
	fRate12() = RasGTP*k13/(K13 + Raf)
	fRate13() = Rafstar*k14*(AktPIPP + E)/(K14 + Rafstar)
	fRate14() = K17*Rafstar*k15/(K15*MEKP + K17*(K15 + MEK))
	fRate15() = PP2A*k16/(AktPIP*K16/K31 + AktPIPP*K16/K33 + K16 + K16*MEKPP/K18 + MEKP)
	fRate16() = K15*Rafstar*k17/(K15*(K17 + MEKP) + K17*MEK)
	fRate17() = PP2A*k18/(AktPIPP*K18/K33 + AktPIPP*K18/K31 + K18 + MEKPP + K18*MEKP/K16)
	fRate18() = K21*MEKPP*k19/(ERKP*K19 + K21*(ERK + K19))
	fRate19() = K22*MKP3*k20/(ERKPP*K20 + K22*(ERKP + K20))
	fRate20() = K19*MEKPP*k21/(ERK*K21 + K19*(ERKP + K21))
	fRate21() = K20*MKP3*k22/(ERKP*K22 + K20*(ERKPP + K22))
	fRate25() = V26/(K26 + PI3Kstar)
	fRate27() = V28/(K28 + PIP3)
	fRate28() = PI3Kstar*k27/(K27 + P_I)
	fRate29() = K32*V30/(AktPIP*K30 + K32*(AktPIP3 + K30))
	fRate30() = PP2A*k31/(AktPIP + AktPIPP*K31/K33 + K31 + K31*MEKPP/K18 + K31*MEKP/K16)
	fRate31() = K30*V32/(AktPIP3*K32 + K30*(AktPIP + K32))
	fRate32() = PP2A*k33/(AktPIP*K33/K31 + AktPIPP + K33 + K33*MEKPP/K18 + K33*MEKP/K16)
end functions
begin reaction rules
	reaction_0000001: R() + HRG() <-> RHRG() k1,k_1
	reaction_0000002: RHRG() + RHRG() <-> RHRG2() k2,k_2
	reaction_0000003: RHRG2() <-> RP() k3,k_3
	reaction_0000004: RP() -> RHRG2() fRate3()
	reaction_0000005: RP() + Shc() <-> RShc() k5,k_5
	reaction_0000006: RShc() <-> RShP() k6,k_6
	reaction_0000007: RShP() + GS() <-> RShGS() k7,k_7
	reaction_0000008: RShGS() <-> ShGS() + RP() k8,k_8
	reaction_0000009: ShGS() <-> GS() + ShP() k9,k_9
	reaction_0000010: ShP() -> Shc() fRate9()
	reaction_0000011: RasGDP() -> RasGTP() fRate10() #Modifiers(ShGS)
	reaction_0000012: RasGTP() -> RasGDP() fRate11()
	reaction_0000013: Raf() -> Rafstar() fRate12() #Modifiers(RasGTP)
	reaction_0000014_reactants_0: 0  -> Rafstar() -1*(fRate13()) #Modifiers(AktPIPP, E)
	reaction_0000014_products_0: 0  -> Raf() fRate13() #Modifiers(AktPIPP, E)
	reaction_0000015: MEK() -> MEKP() fRate14() #Modifiers(Rafstar)
	reaction_0000016: MEKP() -> MEK() fRate15() #Modifiers(MEKPP, AktPIP, AktPIPP, PP2A)
	reaction_0000017: MEKP() -> MEKPP() fRate16() #Modifiers(MEK, Rafstar)
	reaction_0000018: MEKPP() -> MEKP() fRate17() #Modifiers(AktPIP, AktPIPP, PP2A)
	reaction_0000019: ERK() -> ERKP() fRate18() #Modifiers(MEKPP)
	reaction_0000020: ERKP() -> ERK() fRate19() #Modifiers(ERKPP, MKP3)
	reaction_0000021: ERKP() -> ERKPP() fRate20() #Modifiers(MEKPP, ERK)
	reaction_0000022: ERKPP() -> ERKP() fRate21() #Modifiers(MKP3)
	reaction_0000023: RP() + PI3K() <-> RPI3K() k23,k_23
	reaction_0000024: RPI3K() <-> RPI3Kstar() k24,k_24
	reaction_0000025: RPI3Kstar() <-> RP() + PI3Kstar() k25,k_25
	reaction_0000026: PI3Kstar() -> PI3K() fRate25()
	reaction_0000029: PIP3() + Akt() <-> AktPIP3() k29,k_29
	reaction_0000028: PIP3() -> P_I() fRate27()
	reaction_0000027: P_I() -> PIP3() fRate28() #Modifiers(PI3Kstar)
	reaction_0000030: AktPIP3() -> AktPIP() fRate29()
	reaction_0000031: AktPIP() -> AktPIP3() fRate30() #Modifiers(MEKP, MEKPP, AktPIPP, PP2A)
	reaction_0000032: AktPIP() -> AktPIPP() fRate31() #Modifiers(AktPIP3)
	reaction_0000033: AktPIPP() -> AktPIP() fRate32() #Modifiers(MEKP, MEKPP, PP2A)
	reaction_0000034: RP() <-> internalization() k34,k_34
end reaction rules
end model
