###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000153', 'http://identifiers.org/biomodels.db/MODEL3492674214']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/17194217']
#@BQB_IS_VERSION_OF:['http://identifiers.org/obo.go/GO:0007212', 'http://identifiers.org/obo.go/GO:0035235']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@creatorEmail:'lenov@ebi.ac.uk'
#@creatorName:'Le Novère Nicolas'
#@notes:'This is a plain translation of an SBML model created on 13/08/2021. The original model has 75 molecules and 152 reactions. The translated model has 75 molecules and 153 rules'
###
begin model
begin parameters
	k57 2.5e-08
	cAMP_delay 400.0
	cAMP_Ca_delay 50.0
	kon_high 6.6e-06
	spike_duration 2.0
	spike_interval 2.0
	kon_low 2.5e-08
	r1_kon1 5600000.000000
	r2_koff1 12.000000
	r3_kcat1 3.000000
	r4_kon2 4400000.000000
	r5_koff2 12.000000
	r6_kcat2 3.000000
	r7_kon3 5600000.000000
	r8_koff3 10.800000
	r9_kcat3 2.700000
	r10_kon4 5600000.000000
	r11_kon5 4400000.000000
	r12_kon6 10000000.000000
	r13_koff4 12.000000
	r14_kcat4 3.000000
	r15_koff5 12.000000
	r16_kcat5 3.000000
	r17_kcat6 4.000000
	r18_koff6 16.000000
	r19_kon7 4400000.000000
	r20_kon8 5600000.000000
	r21_kon9 3800000.000000
	r22_kon10 17000000.000000
	r23_koff7 12.000000
	r24_kcat7 3.000000
	r25_kcat8 0.000000
	r26_koff8 10.800000
	r27_kcat9 10.000000
	r28_koff9 24.000000
	r29_kcat10 24.000000
	r30_koff10 40.000000
	r31_kon11 5600000.000000
	r32_kon12 5600000.000000
	r33_kon13 7500000.000000
	r34_koff11 12.000000
	r35_kcat11 3.000000
	r36_koff12 10.800000
	r37_kcat12 2.700000
	r38_kcat13 3.000000
	r39_koff13 12.000000
	r40_kon14 4400000.000000
	r41_kon18 5600000.000000
	r42_koff18 12.000000
	r43_koff14 12.000000
	r44_kcat14 3.000000
	r45_kcat18 3.000000
	r46_kon21 5600000.000000
	r47_kcat21 0.000000
	r48_koff21 10.800000
	r49_kon17 10000000.000000
	r50_koff17 1600.000000
	r51_kcat17 4.000000
	r52_kon19 75000.000000
	r53_kcat19 0.030000
	r54_koff19 0.120000
	r55_kon27 75000.000000
	r56_koff27 120.000000
	r57_kcat27 0.030000
	r58_kon15 3800000.000000
	r59_kcat15 10.000000
	r60_koff15 24.000000
	r61_kon22 3800000.000000
	r62_kcat22 10.000000
	r63_koff22 24.000000
	r64_kon25 3800000.000000
	r65_kcat25 10.000000
	r66_koff25 24.000000
	r67_kon16 17000000.000000
	r68_kcat16 24.000000
	r69_koff16 40.000000
	r70_kon23 17000000.000000
	r71_kcat23 24.000000
	r72_koff23 40.000000
	r73_kcat26 24.000000
	r74_kon26 17000000.000000
	r75_koff26 40.000000
	r76_kon20 7500000.000000
	r77_kcat20 3.000000
	r78_koff20 12.000000
	r79_kon24 7500000.000000
	r80_kcat24 3.000000
	r81_koff24 12.000000
	r82_kon28 7500000.000000
	r83_kcat28 3.000000
	r84_koff28 12.000000
	r85_kon29 30000000.000000
	r86_koff29 24.000000
	r87_kcat29 6.000000
	r88_kcat30 1.000000
	r89_kon31 6000000.000000
	r90_kcat31 9.000000
	r91_koff31 36.000000
	r92_kcat32 0.100000
	r93_kon33 10000000.000000
	r94_koff33 16.000000
	r95_kcat33 4.000000
	r96_kcat34 5.000000
	r97_kon35 1000000000000000.000000
	r98_kon36 3000000000000000.000000
	r99_koff35 1.000000
	r100_koff36 1.000000
	r101_kon37 54000000.000000
	r102_kon38 54000000.000000
	r103_kon39 75000000.000000
	r104_kon40 75000000.000000
	r105_koff37 33.000000
	r106_koff38 33.000000
	r107_koff39 110.000000
	r108_koff40 32.500000
	r109_kon41 18000000.000000
	r110_koff41 60.000000
	r111_kon42 18000000.000000
	r112_kon43 60.000000
	r113_kon44 2520000.000000
	r114_koff44 40.000000
	r115_kcat44 10.000000
	r116_kon45 5040000.000000
	r117_koff45 80.000000
	r118_kcat45 20.000000
	r120_k58 1.700000
	r121_kon46 3800000.000000
	r122_kon47 3800000.000000
	r123_kcat47 10.000000
	r124_koff47 6.000000
	r125_kcat46 10.000000
	r126_koff46 6.000000
	r127_kon48 3800000.000000
	r128_kon49 3800000.000000
	r129_kcat49 10.000000
	r130_koff49 6.000000
	r131_kcat48 10.000000
	r132_koff48 6.000000
	r133_kon50 17000000.000000
	r134_kon51 17000000.000000
	r135_kcat51 24.000000
	r136_koff51 10.000000
	r137_kcat50 24.000000
	r138_koff50 10.000000
	r139_kon52 17000000.000000
	r140_kon53 17000000.000000
	r141_kcat53 24.000000
	r142_koff53 10.000000
	r143_kcat52 24.000000
	r144_koff52 10.000000
	r145_kon54 200000.000000
	r146_koff54 1.000000
	r147_kon55 10000000.000000
	r148_kcat55 4.000000
	r149_kon56 200000.000000
	r150_koff56 1.000000
	r151_kcat56 5.000000
	r152_koff55 16.000000
end parameters
begin molecule types
	PKA()
	D34_75_PP2AP()
	D137_CDK5()
	R2C2()
	D75_PP2ACa()
	PP2ACa_PKA()
	cAMP4_R2()
	PP2B()
	CK1P()
	D34_137_CDK5()
	CK1P_PP2B()
	cAMP3_R2C2()
	D75_137()
	AMP()
	cAMP_PDEP()
	PP2AP()
	D34_75_137_PP2B()
	D75_CK1()
	D75_PP2A()
	PP2Binactive()
	D75()
	D_PKA()
	D34_75_PP2APCa()
	PP2A_PKA()
	D34_75_137_PP2A()
	D34_CDK5()
	D34_75()
	PP2A()
	CK1()
	PP2APCa()
	D75_137_PKA()
	CDK5()
	D75_PP2AP()
	cAMP4_R2C()
	cAMP_PDE()
	D()
	cAMP()
	D75_137_PP2APCa()
	D34_75_137()
	D34_PP2B()
	PP2BinactiveCa2()
	D75_137_PP2A()
	D34_75_CK1()
	cAMP4_R2C2()
	Ca()
	D_CDK5()
	cAMP2_R2C2()
	D75_137_PP2ACa()
	Empty()
	D34_75_137_PP2ACa()
	D137_PP2C()
	D34_137_PP2B()
	D34_137()
	D34_75_PP2A()
	PP2C()
	PP2ACa()
	D75_PP2APCa()
	D34_75_137_PP2AP()
	D34_75_137_PP2C()
	cAMP_R2C2()
	D137_PKA()
	D34_137_PP2C()
	D75_PKA()
	D34_CK1()
	D34_75_PP2B()
	D75_137_PP2AP()
	PDEP()
	D75_137_PP2C()
	D34_75_PP2ACa()
	D34_75_137_PP2APCa()
	D34()
	PDE_PKA()
	PDE()
	D_CK1()
	D137()
end molecule types
begin seed species
	D() 2.998956e+18 # 4.98e-06mol/L * 6.022e23/mol *1.0L #D #D
	CDK5() 1.2044e+17 #original 2e-07mol/L  #CDK5 #CDK5
	CK1() 9.99652e+16 #original 1.66e-07mol/L  #CK1 #CK1
	PP2A() 1.2044e+17 #original 2e-07mol/L  #PP2A #PP2A
	PP2C() 8.009260000000002e+16 #original 1.33e-07mol/L  #PP2C #PP2C
	PDE() 1.2044e+18 #original 2e-06mol/L  #PDE #PDE
	PP2Binactive() 1.999304e+17 #original 3.32e-07mol/L  #PP2Binactive #PP2Binactive
	R2C2() 3.998608e+18 #original 6.64e-06mol/L  #R2C2 #R2C2
end seed species
begin observables
	Species D D() #D
	Species CDK5 CDK5() #CDK5
	Species D_CDK5 D_CDK5() #D_CDK5
	Species D75 D75() #D75
	Species CK1 CK1() #CK1
	Species D_CK1 D_CK1() #D_CK1
	Species D137 D137() #D137
	Species PKA PKA() #PKA
	Species D_PKA D_PKA() #D_PKA
	Species D34 D34() #D34
	Species D34_CDK5 D34_CDK5() #D34_CDK5
	Species D34_CK1 D34_CK1() #D34_CK1
	Species PP2B PP2B() #PP2B
	Species D34_PP2B D34_PP2B() #D34_PP2B
	Species D34_75 D34_75() #D34:75
	Species D34_137 D34_137() #D34:137
	Species D75_CK1 D75_CK1() #D75_CK1
	Species D75_PKA D75_PKA() #D75_PKA
	Species PP2A PP2A() #PP2A
	Species D75_PP2A D75_PP2A() #D75_PP2A
	Species PP2AP PP2AP() #PP2AP
	Species D75_PP2AP D75_PP2AP() #D75_PP2AP
	Species D75_137 D75_137() #D75:137
	Species D137_CDK5 D137_CDK5() #D137_CDK5
	Species D137_PKA D137_PKA() #D137_PKA
	Species D137_PP2C D137_PP2C() #D137_PP2C
	Species PP2C PP2C() #PP2C
	Species D34_75_CK1 D34_75_CK1() #D34:75_CK1
	Species D34_137_CDK5 D34_137_CDK5() #D34:137_CDK5
	Species D34_75_137 D34_75_137() #D34:75:137
	Species D75_137_PKA D75_137_PKA() #D75:137_PKA
	Species D34_75_PP2B D34_75_PP2B() #D34:75_PP2B
	Species D34_137_PP2B D34_137_PP2B() #D34:137_PP2B
	Species D34_75_137_PP2B D34_75_137_PP2B() #D34:75:137_PP2B
	Species D34_75_PP2A D34_75_PP2A() #D34:75_PP2A
	Species D75_137_PP2A D75_137_PP2A() #D75:137_PP2A
	Species D34_75_137_PP2A D34_75_137_PP2A() #D34:75:137_PP2A
	Species D34_75_PP2AP D34_75_PP2AP() #D34:75_PP2AP
	Species D75_137_PP2AP D75_137_PP2AP() #D75:137_PP2AP
	Species D34_75_137_PP2AP D34_75_137_PP2AP() #D34:75:137_PP2AP
	Species D34_137_PP2C D34_137_PP2C() #D34:137_PP2C
	Species D75_137_PP2C D75_137_PP2C() #D75:137_PP2C
	Species PDE PDE() #PDE
	Species PP2Binactive PP2Binactive() #PP2Binactive
	Species D34_75_137_PP2C D34_75_137_PP2C() #D34:75:137_PP2C
	Species CK1P CK1P() #CK1P
	Species CK1P_PP2B CK1P_PP2B() #CK1P_PP2B
	Species PDE_PKA PDE_PKA() #PDE_PKA
	Species PDEP PDEP() #PDEP
	Species PP2A_PKA PP2A_PKA() #PP2A_PKA
	Species Ca Ca() #Ca
	Species PP2BinactiveCa2 PP2BinactiveCa2() #PP2BinactiveCa2
	Species R2C2 R2C2() #R2C2
	Species cAMP cAMP() #cAMP
	Species cAMP_R2C2 cAMP_R2C2() #cAMP_R2C2
	Species cAMP2_R2C2 cAMP2_R2C2() #cAMP2_R2C2
	Species cAMP3_R2C2 cAMP3_R2C2() #cAMP3_R2C2
	Species cAMP4_R2C2 cAMP4_R2C2() #cAMP4_R2C2
	Species cAMP4_R2C cAMP4_R2C() #cAMP4_R2C
	Species cAMP4_R2 cAMP4_R2() #cAMP4_R2
	Species cAMP_PDE cAMP_PDE() #cAMP_PDE
	Species AMP AMP() #AMP
	Species cAMP_PDEP cAMP_PDEP() #cAMP_PDEP
	Species PP2ACa PP2ACa() #PP2ACa
	Species D34_75_PP2ACa D34_75_PP2ACa() #D34:75_PP2ACa
	Species D34_75_137_PP2ACa D34_75_137_PP2ACa() #D34:75:137_PP2ACa
	Species D75_PP2ACa D75_PP2ACa() #D75_PP2ACa
	Species D75_137_PP2ACa D75_137_PP2ACa() #D75:137_PP2ACa
	Species D34_75_PP2APCa D34_75_PP2APCa() #D34:75_PP2APCa
	Species PP2APCa PP2APCa() #PP2APCa
	Species D34_75_137_PP2APCa D34_75_137_PP2APCa() #D34:75:137_PP2APCa
	Species D75_PP2APCa D75_PP2APCa() #D75_PP2APCa
	Species D75_137_PP2APCa D75_137_PP2APCa() #D75:137_PP2APCa
	Species PP2ACa_PKA PP2ACa_PKA() #PP2ACa_PKA
	Species Empty Empty() #Empty
end observables
begin functions
	fRate118() = k57
end functions
begin reaction rules
	von1: D() + CDK5() -> D_CDK5() r1_kon1
	voff1: D_CDK5() -> D() + CDK5() r2_koff1
	vcat1: D_CDK5() -> D75() + CDK5() r3_kcat1
	von2: D() + CK1() -> D_CK1() r4_kon2
	voff2: D_CK1() -> D() + CK1() r5_koff2
	vcat2: D_CK1() -> D137() + CK1() r6_kcat2
	von3: D() + PKA() -> D_PKA() r7_kon3
	voff3: D_PKA() -> D() + PKA() r8_koff3
	vcat3: D_PKA() -> D34() + PKA() r9_kcat3
	von4: D34() + CDK5() -> D34_CDK5() r10_kon4
	von5: D34() + CK1() -> D34_CK1() r11_kon5
	von6: D34() + PP2B() -> D34_PP2B() r12_kon6
	voff4: D34_CDK5() -> D34() + CDK5() r13_koff4
	vcat4: D34_CDK5() -> D34_75() + CDK5() r14_kcat4
	voff5: D34_CK1() -> D34() + CK1() r15_koff5
	vcat5: D34_CK1() -> D34_137() + CK1() r16_kcat5
	vcat6: D34_PP2B() -> D() + PP2B() r17_kcat6
	voff6: D34_PP2B() -> D34() + PP2B() r18_koff6
	von7: D75() + CK1() -> D75_CK1() r19_kon7
	von8: D75() + PKA() -> D75_PKA() r20_kon8
	von9: D75() + PP2A() -> D75_PP2A() r21_kon9
	von10: D75() + PP2AP() -> D75_PP2AP() r22_kon10
	voff7: D75_CK1() -> D75() + CK1() r23_koff7
	vcat7: D75_CK1() -> CK1() + D75_137() r24_kcat7
	vcat8: D75_PKA() -> D34_75() + PKA() r25_kcat8
	voff8: D75_PKA() -> D75() + PKA() r26_koff8
	vcat9: D75_PP2A() -> D() + PP2A() r27_kcat9
	voff9: D75_PP2A() -> D75() + PP2A() r28_koff9
	vcat10: D75_PP2AP() -> D() + PP2AP() r29_kcat10
	voff10: D75_PP2AP() -> D75() + PP2AP() r30_koff10
	von11: D137() + CDK5() -> D137_CDK5() r31_kon11
	von12: D137() + PKA() -> D137_PKA() r32_kon12
	von13: D137() + PP2C() -> D137_PP2C() r33_kon13
	voff11: D137_CDK5() -> D137() + CDK5() r34_koff11
	vcat11: D137_CDK5() -> D75_137() + CDK5() r35_kcat11
	voff12: D137_PKA() -> D137() + PKA() r36_koff12
	vcat12: D137_PKA() -> D34_137() + PKA() r37_kcat12
	vcat13: D137_PP2C() -> D() + PP2C() r38_kcat13
	voff13: D137_PP2C() -> D137() + PP2C() r39_koff13
	von14: D34_75() + CK1() -> D34_75_CK1() r40_kon14
	von18: D34_137() + CDK5() -> D34_137_CDK5() r41_kon18
	voff18: D34_137_CDK5() -> D34_137() + CDK5() r42_koff18
	voff14: D34_75_CK1() -> D34_75() + CK1() r43_koff14
	vcat14: D34_75_CK1() -> D34_75_137() + CK1() r44_kcat14
	vcat18: D34_137_CDK5() -> D34_75_137() + CDK5() r45_kcat18
	von21: D75_137() + PKA() -> D75_137_PKA() r46_kon21
	vcat21: D75_137_PKA() -> D34_75_137() + PKA() r47_kcat21
	voff21: D75_137_PKA() -> D75_137() + PKA() r48_koff21
	von17: D34_75() + PP2B() -> D34_75_PP2B() r49_kon17
	voff17: D34_75_PP2B() -> D34_75() + PP2B() r50_koff17
	vcat17: D34_75_PP2B() -> D75() + PP2B() r51_kcat17
	von19: D34_137() + PP2B() -> D34_137_PP2B() r52_kon19
	vcat19: D34_137_PP2B() -> D137() + PP2B() r53_kcat19
	voff19: D34_137_PP2B() -> D34_137() + PP2B() r54_koff19
	von27: D34_75_137() + PP2B() -> D34_75_137_PP2B() r55_kon27
	voff27: D34_75_137_PP2B() -> D34_75_137() + PP2B() r56_koff27
	vcat27: D34_75_137_PP2B() -> D75_137() + PP2B() r57_kcat27
	von15: D34_75() + PP2A() -> D34_75_PP2A() r58_kon15
	vcat15: D34_75_PP2A() -> D34() + PP2A() r59_kcat15
	voff15: D34_75_PP2A() -> D34_75() + PP2A() r60_koff15
	von22: D75_137() + PP2A() -> D75_137_PP2A() r61_kon22
	vcat22: D75_137_PP2A() -> D137() + PP2A() r62_kcat22
	voff22: D75_137_PP2A() -> D75_137() + PP2A() r63_koff22
	von25: D34_75_137() + PP2A() -> D34_75_137_PP2A() r64_kon25
	vcat25: D34_75_137_PP2A() -> D34_137() + PP2A() r65_kcat25
	voff25: D34_75_137_PP2A() -> D34_75_137() + PP2A() r66_koff25
	von16: D34_75() + PP2AP() -> D34_75_PP2AP() r67_kon16
	vcat16: D34_75_PP2AP() -> D34() + PP2AP() r68_kcat16
	voff16: D34_75_PP2AP() -> D34_75() + PP2AP() r69_koff16
	von23: D75_137() + PP2AP() -> D75_137_PP2AP() r70_kon23
	vcat23: D75_137_PP2AP() -> D137() + PP2AP() r71_kcat23
	voff23: D75_137_PP2AP() -> D75_137() + PP2AP() r72_koff23
	vcat26: D34_75_137_PP2AP() -> D34_137() + PP2AP() r73_kcat26
	von26: D34_75_137() + PP2AP() -> D34_75_137_PP2AP() r74_kon26
	voff26: D34_75_137_PP2AP() -> D34_75_137() + PP2AP() r75_koff26
	von20: D34_137() + PP2C() -> D34_137_PP2C() r76_kon20
	vcat20: D34_137_PP2C() -> D34() + PP2C() r77_kcat20
	voff20: D34_137_PP2C() -> D34_137() + PP2C() r78_koff20
	von24: D75_137() + PP2C() -> D75_137_PP2C() r79_kon24
	vcat24: D75_137_PP2C() -> D75() + PP2C() r80_kcat24
	voff24: D75_137_PP2C() -> D75_137() + PP2C() r81_koff24
	von28: D34_75_137() + PP2C() -> D34_75_137_PP2C() r82_kon28
	vcat28: D34_75_137_PP2C() -> D34_75() + PP2C() r83_kcat28
	voff28: D34_75_137_PP2C() -> D34_75_137() + PP2C() r84_koff28
	von29: CK1P() + PP2B() -> CK1P_PP2B() r85_kon29
	voff29: CK1P_PP2B() -> CK1P() + PP2B() r86_koff29
	vcat29: CK1P_PP2B() -> CK1() + PP2B() r87_kcat29
	vcat30: CK1() -> CK1P() r88_kcat30
	von31: PDE() + PKA() -> PDE_PKA() r89_kon31
	vcat31: PDE_PKA() -> PDEP() + PKA() r90_kcat31
	voff31: PDE_PKA() -> PDE() + PKA() r91_koff31
	vcat32: PDEP() -> PDE() r92_kcat32
	von33: PP2A() + PKA() -> PP2A_PKA() r93_kon33
	voff33: PP2A_PKA() -> PP2A() + PKA() r94_koff33
	vcat33: PP2A_PKA() -> PP2AP() + PKA() r95_kcat33
	vcat34: PP2AP() -> PP2A() r96_kcat34
	von35: PP2Binactive() + Ca() + Ca() -> PP2BinactiveCa2() r97_kon35
	von36: PP2BinactiveCa2() + Ca() + Ca() -> PP2B() r98_kon36
	voff35: PP2BinactiveCa2() -> PP2Binactive() + Ca() + Ca() r99_koff35
	voff36: PP2B() -> PP2BinactiveCa2() + Ca() + Ca() r100_koff36
	von37: R2C2() + cAMP() -> cAMP_R2C2() r101_kon37
	von38: cAMP_R2C2() + cAMP() -> cAMP2_R2C2() r102_kon38
	von39: cAMP2_R2C2() + cAMP() -> cAMP3_R2C2() r103_kon39
	von40: cAMP3_R2C2() + cAMP() -> cAMP4_R2C2() r104_kon40
	voff37: cAMP_R2C2() -> R2C2() + cAMP() r105_koff37
	voff38: cAMP2_R2C2() -> cAMP_R2C2() + cAMP() r106_koff38
	voff39: cAMP3_R2C2() -> cAMP2_R2C2() + cAMP() r107_koff39
	voff40: cAMP4_R2C2() -> cAMP3_R2C2() + cAMP() r108_koff40
	von41: cAMP4_R2C() + PKA() -> cAMP4_R2C2() r109_kon41
	voff41: cAMP4_R2C2() -> cAMP4_R2C() + PKA() r110_koff41
	von42: cAMP4_R2() + PKA() -> cAMP4_R2C() r111_kon42
	von43: cAMP4_R2C() -> cAMP4_R2() + PKA() r112_kon43
	von44: cAMP() + PDE() -> cAMP_PDE() r113_kon44
	voff44: cAMP_PDE() -> cAMP() + PDE() r114_koff44
	vcat44: cAMP_PDE() -> AMP() + PDE() r115_kcat44
	von45: cAMP() + PDEP() -> cAMP_PDEP() r116_kon45
	voff45: cAMP_PDEP() -> cAMP() + PDEP() r117_koff45
	vcat45: cAMP_PDEP() -> AMP() + PDEP() r118_kcat45
	v57_reactants_0: 0  -> Empty() -1*(fRate118())
	v57_products_0: 0  -> Ca() fRate118()
	v58: Ca() -> Empty() r120_k58
	von46: D34_75() + PP2ACa() -> D34_75_PP2ACa() r121_kon46
	von47: D34_75_137() + PP2ACa() -> D34_75_137_PP2ACa() r122_kon47
	vcat47: D34_75_137_PP2ACa() -> D34_137() + PP2ACa() r123_kcat47
	voff47: D34_75_137_PP2ACa() -> D34_75_137() + PP2ACa() r124_koff47
	vcat46: D34_75_PP2ACa() -> D34() + PP2ACa() r125_kcat46
	voff46: D34_75_PP2ACa() -> D34_75() + PP2ACa() r126_koff46
	von48: D75() + PP2ACa() -> D75_PP2ACa() r127_kon48
	von49: D75_137() + PP2ACa() -> D75_137_PP2ACa() r128_kon49
	vcat49: D75_137_PP2ACa() -> D137() + PP2ACa() r129_kcat49
	voff49: D75_137_PP2ACa() -> D75_137() + PP2ACa() r130_koff49
	vcat48: D75_PP2ACa() -> D() + PP2ACa() r131_kcat48
	voff48: D75_PP2ACa() -> D75() + PP2ACa() r132_koff48
	von50: D34_75() + PP2APCa() -> D34_75_PP2APCa() r133_kon50
	von51: D34_75_137() + PP2APCa() -> D34_75_137_PP2APCa() r134_kon51
	vcat51: D34_75_137_PP2APCa() -> PP2APCa() + D34_137() r135_kcat51
	voff51: D34_75_137_PP2APCa() -> D34_75_137() + PP2APCa() r136_koff51
	vcat50: D34_75_PP2APCa() -> D34() + PP2APCa() r137_kcat50
	voff50: D34_75_PP2APCa() -> D34_75() + PP2APCa() r138_koff50
	von52: D75() + PP2APCa() -> D75_PP2APCa() r139_kon52
	von53: D75_137() + PP2APCa() -> D75_137_PP2APCa() r140_kon53
	vcat53: D75_137_PP2APCa() -> D137() + PP2APCa() r141_kcat53
	voff53: D75_137_PP2APCa() -> D75_137() + PP2APCa() r142_koff53
	vcat52: D75_PP2APCa() -> D() + PP2APCa() r143_kcat52
	voff52: D75_PP2APCa() -> D75() + PP2APCa() r144_koff52
	von54: Ca() + PP2A() -> PP2ACa() r145_kon54
	voff54: PP2ACa() -> PP2A() + Ca() r146_koff54
	von55: PP2ACa() + PKA() -> PP2ACa_PKA() r147_kon55
	vcat55: PP2ACa_PKA() -> PP2APCa() + PKA() r148_kcat55
	von56: PP2AP() + Ca() -> PP2APCa() r149_kon56
	voff56: PP2APCa() -> PP2AP() + Ca() r150_koff56
	vcat56: PP2APCa() -> PP2ACa() r151_kcat56
	voff55: PP2ACa_PKA() -> PP2ACa() + PKA() r152_koff55
end reaction rules
end model
