###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000160', 'http://identifiers.org/biomodels.db/MODEL1029395046']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/17157878']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/7227']
#@BQB_IS_PART_OF:['http://identifiers.org/kegg.pathway/dme04711']
#@BQB_IS:['http://identifiers.org/obo.go/GO:0007623', 'http://identifiers.org/obo.go/GO:0045187']
#@creatorEmail:'hdharuri@cds.caltech.edu'
#@creatorName:'Dharuri Harish'
#@notes:'This is a plain translation of an SBML model created on 14/08/2021. The original model has 25 molecules and 41 reactions. The translated model has 20 molecules and 41 rules'
###
begin model
begin parameters
	dccpt 15.06
	bccperp 0.069
	ubccperp 0.262
	bccpt 51.0
	dperm 0.053
	tlper 36.0
	tcccperp 11.0
	tcdvpmt 0.028
	dvri 1.226
	tcclkp 1.42
	bcc 2.349
	dclk 0.2
	ubcc 0.89
	bpt 1.1
	ubpt 2.93
	dper 0.62
	tcccvrip 16.86
	tcccpdpp 9.831
	dvrim 0.07
	dpdpm 0.06
	ubccpt 7.89
	tlvri 14.68
	tlpdp 1.87
	bccvrip 0.1
	bccpdpp 0.062
	ubccvrip 0.276
	ubccpdpp 0.145
	tcpdpclkp 125.54
	dclkm 0.643
	bvriclkp 1.858
	bpdpclkp 1.155
	ubvriclkp 1.043
	ubpdpclkp 0.952
	tcvriclkp 0.053
	dpdp 0.156
	tlclk 35.0
	dcc 0.184
	dpt 0.279
	dtim 0.62
	dtimm 0.053
	tltim 36.0
	bcctimp 0.069
	ubcctimp 0.262
	tccctimp 11.0
	npt 5.0
	nvri 4.0
	npdp 6.0
	clkp 1918007000000.0002 #original 0.003185nano mole/L
	perp 1918007000000.0002 #original 0.003185nano mole/L
	vrip 1918007000000.0002 #original 0.003185nano mole/L
	pdpp 1918007000000.0002 #original 0.003185nano mole/L
	timp 1918007000000.0002 #original 0.003185nano mole/L
end parameters
begin molecule types
	PDP()
	CCPT()
	timm()
	VRI()
	CCbindingPer()
	PT()
	CCbindingvri()
	pdpm()
	CCbindingpdp()
	CCbindingtim()
	CC()
	clkm()
	CLK()
	VRIbindingclkp()
	TIM()
	CYC()
	PER()
	PDPbindingclkp()
	perm()
	vrim()
end molecule types
begin seed species
	CC() 335184520000000.0 # (0.5566 * 1e-09)mol/L * 6.022e23/mol *1.0L #CC #CC
	CCPT() 300016040000000.0 #original 0.4982nano mole/L  #CCPT #CCPT
	clkm() 155548260000000.0 #original 0.2583nano mole/L  #clkm #clkm
	perm() 144226900000000.0 #original 0.2395nano mole/L  #perm #perm
	PT() 241723080000000.0 #original 0.4014nano mole/L  #PT #PT
	vrim() 154825620000000.03 #original 0.2571nano mole/L  #vrim #vrim
	VRI() 1911985000000000.0 #original 3.175nano mole/L  #VRI #VRI
	pdpm() 191198500000000.03 #original 0.3175nano mole/L  #pdpm #pdpm
	PDP() 2526409660000000.0 #original 4.1953nano mole/L  #PDP #PDP
	CLK() 2205738160000000.2 #original 3.6628nano mole/L  #CLK #CLK
	PER() 1657675940000000.2 #original 2.7527nano mole/L  #PER #PER
	timm() 144226900000000.0 #original 0.2395nano mole/L  #timm #timm
	TIM() 1657675940000000.2 #original 2.7527nano mole/L  #TIM #TIM
	$CYC() 602200000000000.1 #original 1.0nano mole/L  #CYC #CYC
	CCbindingPer() 0.0431 #CCbindingPer #prcper
	CCbindingvri() 0.0585 #CCbindingvri #prcv
	CCbindingpdp() 0.08 #CCbindingpdp #prcpdp
	VRIbindingclkp() 0.489 #VRIbindingclkp #prvc
	PDPbindingclkp() 0.426 #PDPbindingclkp #prpc
	CCbindingtim() 0.043 #CCbindingtim #prct
end seed species
begin observables
	Species CC CC() #CC
	Species CCPT CCPT() #CCPT
	Species clkm clkm() #clkm
	Species perm perm() #perm
	Species PT PT() #PT
	Species vrim vrim() #vrim
	Species VRI VRI() #VRI
	Species pdpm pdpm() #pdpm
	Species PDP PDP() #PDP
	Species CLK CLK() #CLK
	Species PER PER() #PER
	Species timm timm() #timm
	Species TIM TIM() #TIM
	Species CYC CYC() #CYC
	Species CCbindingPer CCbindingPer() #CCbindingPer
	Species CCbindingvri CCbindingvri() #CCbindingvri
	Species CCbindingpdp CCbindingpdp() #CCbindingpdp
	Species VRIbindingclkp VRIbindingclkp() #VRIbindingclkp
	Species PDPbindingclkp PDPbindingclkp() #PDPbindingclkp
	Species CCbindingtim CCbindingtim() #CCbindingtim
end observables
begin functions
	fRate5() = clkm*tlclk
	fRate7() = perm*tlper
	fRate8() = perp*(tcccperp*(1 - (1 - CCbindingPer)^npt) + tcdvpmt*(1 - CCbindingPer)^npt)
	fRate9() = vrip*(tcccvrip*(1 - (1 - CCbindingvri)^nvri) + tcdvpmt*(1 - CCbindingvri)^nvri)
	fRate11() = tlvri*vrim
	fRate13() = pdpp*(tcccpdpp*(1 - (1 - CCbindingpdp)^npdp) + tcdvpmt*(1 - CCbindingpdp)^npdp)
	fRate15() = pdpm*tlpdp
	fRate17() = clkp*(PDPbindingclkp*tcpdpclkp + VRIbindingclkp*tcvriclkp + tcclkp*(-PDPbindingclkp - VRIbindingclkp + 1))
	fRate24() = timp*(tccctimp*(1 - (1 - CCbindingtim)^npt) + tcdvpmt*(1 - CCbindingtim)^npt)
	fRate26() = timm*tltim
	fRate29() = CC*bccperp
	fRate29m() = CC*bccperp
	fRate32() = CC*bccvrip
	fRate32m() = CC*bccvrip
	fRate34() = CC*bccpdpp
	fRate34m() = CC*bccpdpp
	fRate35() = VRI*bvriclkp*(-PDPbindingclkp - VRIbindingclkp + 1)
	fRate37() = PDP*bpdpclkp*(-PDPbindingclkp - VRIbindingclkp + 1)
	fRate39() = CC*bcctimp
	fRate39m() = CC*bcctimp
end functions
begin reaction rules
	re1: CC() + PT() -> CCPT() bccpt
	re2: CC() -> 0  dcc
	re3: CCPT() -> 0  dccpt
	re4: PT() -> 0  dpt
	re9: clkm() -> 0  dclkm
	re10: 0  -> CLK() fRate5() #Modifiers(clkm)
	re15: perm() -> 0  dperm
	re17: 0  -> PER() fRate7() #Modifiers(perm)
	re20_products_0: 0  -> perm() fRate8() #Modifiers(prcper, perp)
	re28_products_0: 0  -> vrim() fRate9() #Modifiers(prcv, vrip)
	re30: vrim() -> 0  dvrim
	re31: 0  -> VRI() fRate11() #Modifiers(vrim)
	re32: VRI() -> 0  dvri
	re35_products_0: 0  -> pdpm() fRate13() #Modifiers(prcpdp, pdpp)
	re37: pdpm() -> 0  dpdpm
	re38: 0  -> PDP() fRate15() #Modifiers(pdpm)
	re39: PDP() -> 0  dpdp
	re42_products_0: 0  -> clkm() fRate17() #Modifiers(prvc, clkp, prpc)
	re43: CLK() + CYC() -> CC() bcc
	re44: CLK() -> 0  dclk
	re45: CC() -> CLK() + CYC() ubcc
	re46: PER() + TIM() -> PT() bpt
	re47: PT() -> PER() + TIM() ubpt
	re48: PER() -> 0  dper
	re51_products_0: 0  -> timm() fRate24() #Modifiers(prct, timp)
	re53: timm() -> 0  dtimm
	re54: 0  -> TIM() fRate26() #Modifiers(timm)
	re55: TIM() -> 0  dtim
	re56: CCPT() -> CC() + PT() ubccpt
	re57: 0  <-> CCbindingPer() fRate29(),fRate29m() #Modifiers(CC)
	re58: CCbindingPer() -> 0  ubccperp
	re59: CCbindingvri() -> 0  ubccvrip
	re60: 0  <-> CCbindingvri() fRate32(),fRate32m() #Modifiers(CC)
	re61: CCbindingpdp() -> 0  ubccpdpp
	re62: 0  <-> CCbindingpdp() fRate34(),fRate34m() #Modifiers(CC)
	re63_products_0: 0  -> VRIbindingclkp() fRate35() #Modifiers(prpc, VRI)
	re64: VRIbindingclkp() -> 0  ubvriclkp
	re65_products_0: 0  -> PDPbindingclkp() fRate37() #Modifiers(prvc, PDP)
	re66: PDPbindingclkp() -> 0  ubpdpclkp
	re68: 0  <-> CCbindingtim() fRate39(),fRate39m() #Modifiers(CC)
	re69: CCbindingtim() -> 0  ubcctimp
end reaction rules
end model
