###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000177', 'http://identifiers.org/biomodels.db/MODEL2427135959']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/17667951']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/4932']
#@BQB_HAS_PART:['http://identifiers.org/obo.go/GO:0006096', 'http://identifiers.org/kegg.pathway/sce00010']
#@creatorEmail:'conantg@tcd.ie'
#@creatorName:'Conant Gavin'
#@notes:'This is a plain translation of an SBML model created on 13/08/2021. The original model has 28 molecules and 21 reactions. The translated model has 27 molecules and 37 rules'
###
begin model
begin parameters
	t_m 1.0 #units:dimensionless
	WGD_E 0.65 #units:dimensionless
	Fru2_6_P2_cyto 1.2044000000000002e+19 #original 0.02mmol/L
	Fru2_6_P2 1.2044000000000002e+19 #original 0.02mmol/L
	r1_Vmax_1 97.240000
	r1_Kglc_1 1.191800
	r1_Ki_1 0.910000
	r2_Vmax_2 236.700000
	r2_Kglc_2 0.080000
	r2_Katp_2 0.150000
	r2_Keq_2 2000.000000
	r2_Kg6p_2 30.000000
	r2_Kadp_2 0.230000
	r3_Vmax_3 1056.000000
	r3_Kg6p_3 1.400000
	r3_Keq_3 0.290000
	r3_Kf6p_3 0.300000
	r4_Vmax_4 110.000000
	r4_gR_4 5.120000
	r4_Kf6p_4 0.100000
	r4_Katp_4 0.710000
	r4_L0_4 0.660000
	r4_Ciatp_4 100.000000
	r4_Kiatp_4 0.650000
	r4_Camp_4 0.084500
	r4_Kamp_4 0.099500
	r4_Cf26_4 0.017400
	r4_Kf26_4 0.000682
	r4_Cf16_4 0.397000
	r4_Kf16_4 0.111000
	r4_Catp_4 3.000000
	r5_Vmax_5 94.690000
	r5_Kf16bp_5 0.300000
	r5_Keq_5 0.069000
	r5_Kdhap_5 2.000000
	r5_Kgap_5 2.400000
	r5_Kigap_5 10.000000
	r6_k1_6 450000.000000
	r6_k2_6 10000000.000000
	r7_C_7 1.000000
	r7_Vmaxf_7 1152.000000
	r7_Kgap_7 0.210000
	r7_Knad_7 0.090000
	r7_Vmaxr_7 6719.000000
	r7_Kbpg_7 0.009800
	r7_Knadh_7 0.060000
	r8_Vmax_8 1288.000000
	r8_Keq_8 3200.000000
	r8_Kp3g_8 0.530000
	r8_Katp_8 0.300000
	r8_Kbpg_8 0.003000
	r8_Kadp_8 0.200000
	r9_Vmax_9 2585.000000
	r9_Kp3g_9 1.200000
	r9_Keq_9 0.190000
	r9_Kp2g_9 0.080000
	r10_Vmax_10 201.600000
	r10_Kp2g_10 0.040000
	r10_Keq_10 6.700000
	r10_Kpep_10 0.500000
	r11_Vmax_11 1000.000000
	r11_Kpep_11 0.140000
	r11_Kadp_11 0.530000
	r11_Keq_11 6500.000000
	r11_Kpyr_11 21.000000
	r11_Katp_11 1.500000
	r12_Vmax_12 857.800000
	r12_Kpyr_12 4.330000
	r12_nH_12 1.900000
	r13_Vmax_13 209.500000
	r13_Ketoh_13 17.000000
	r13_Kinad_13 0.920000
	r13_Keq_13 0.000069
	r13_Knad_13 0.170000
	r13_Knadh_13 0.110000
	r13_Kinadh_13 0.031000
	r13_Kacald_13 1.110000
	r13_Kiacald_13 1.100000
	r13_Kietoh_13 90.000000
	r14_Katpase_14 39.500000
	r15_k1_15 45.000000
	r15_k2_15 100.000000
	r16_Vmax_16 47.110000
	r16_Kdhap_16 0.400000
	r16_Knadh_16 0.023000
	r16_Keq_16 4300.000000
	r16_Kglycerol_16 1.000000
	r16_Knad_16 0.930000
	r17_KGLYCOGEN_17 6.000000
	r18_Ktrehalose_18 2.400000
	r19_k_19 21.400000
	r20_k1 1.000000
	r20_k2 1.000000
	r21_Vmax_PDH 379.200000
	r21_NADX_tot 8.010000
	r21_K_PYR 70.000000
	r21_K_NAD 160.000000
	r21_Ki_NADH 50.000000
	r21_Ki_PYR 20.000000
end parameters
begin compartments
	#volume units: L
	cyto 3 1.0 #cytoplasm
	mito 3 1.0 #mitochondrion
end compartments
begin molecule types
	BPG()
	F6P()
	AcCoA()
	AMP()
	GLCi()
	NADH()
	EtOH()
	Succinate()
	F16bP()
	PYRmito()
	Glycogen()
	ADP()
	GLCo()
	CO2mito()
	DHAP()
	PEP()
	AcAld()
	ATP()
	PYR()
	P3G()
	P2G()
	G6P()
	CO2()
	Glycerol()
	Trehalose()
	NAD()
	GAP()
end molecule types
begin seed species
	@cyto:GLCi() 5.8806173547079836e+19 # (0.097652231064563 * 0.001)mol/L * 6.022e23/mol *1.0L #GLCi #GLCi
	@cyto:ATP() 1.52063175941861e+21 #original 2.52512746499271mmol/L  #ATP #ATP
	@cyto:G6P() 1.6109091725777075e+21 #original 2.67504014044787mmol/L  #G6P #G6P
	@cyto:ADP() 7.720129819120258e+20 #original 1.28198768168719mmol/L  #ADP #ADP
	@cyto:F6P() 3.763607914115951e+20 #original 0.624976405532373mmol/L  #F6P #F6P
	@cyto:F16bP() 3.7464793620899934e+21 #original 6.22132076069411mmol/L  #F16bP #F16bP
	@cyto:AMP() 1.763752586693588e+20 #original 0.292884853320091mmol/L  #AMP #AMP
	@cyto:DHAP() 6.047006650056562e+20 #original 1.00415254899644mmol/L  #DHAP #DHAP
	@cyto:GAP() 2.720794856552959e+19 #original 0.0451809175780963mmol/L  #GAP #GAP
	@cyto:NAD() 9.052814198736198e+20 #original 1.50329030201531mmol/L  #NAD #NAD
	@cyto:BPG() 4.4374522161906554e+17 #original 0.000736873499865602mmol/L  #BPG #BPG
	@cyto:NADH() 5.221658012638346e+19 #original 0.0867096979846952mmol/L  #NADH #NADH
	@cyto:P3G() 5.333616378007889e+20 #original 0.885688538360659mmol/L  #P3G #P3G
	@cyto:P2G() 7.68984212302298e+19 #original 0.127695817386632mmol/L  #P2G #P2G
	@cyto:PEP() 3.808024616807766e+19 #original 0.0632352144936527mmol/L  #PEP #PEP
	@cyto:PYR() 1.0931811946826564e+21 #original 1.81531251192736mmol/L  #PYR #PYR
	@cyto:AcAld() 1.0727625718606566e+20 #original 0.178140579850657mmol/L  #AcAld #AcAld
	@cyto:GLCo() 3.0110000000000005e+22 #original 50.0mmol/L  #GLCo #GLCo
	@cyto:CO2() 6.022e+20 #original 1.0mmol/L  #CO2 #CO2
	@cyto:EtOH() 3.0110000000000005e+22 #original 50.0mmol/L  #EtOH #EtOH
	@cyto:Glycerol() 9.033e+19 #original 0.15mmol/L  #Glycerol #Glycerol
	@mito:AcCoA() 6.022e+20 #original 1.0mmol/L  #AcCoA #AcCoA
	@mito:CO2mito() 6.022e+20 #original 1.0mmol/L  #CO2mito #CO2mito
end seed species
begin observables
	Species GLCi_cyto @cyto:GLCi() #GLCi
	Species ATP_cyto @cyto:ATP() #ATP
	Species G6P_cyto @cyto:G6P() #G6P
	Species ADP_cyto @cyto:ADP() #ADP
	Species F6P_cyto @cyto:F6P() #F6P
	Species F16bP_cyto @cyto:F16bP() #F16bP
	Species AMP_cyto @cyto:AMP() #AMP
	Species DHAP_cyto @cyto:DHAP() #DHAP
	Species GAP_cyto @cyto:GAP() #GAP
	Species NAD_cyto @cyto:NAD() #NAD
	Species BPG_cyto @cyto:BPG() #BPG
	Species NADH_cyto @cyto:NADH() #NADH
	Species P3G_cyto @cyto:P3G() #P3G
	Species P2G_cyto @cyto:P2G() #P2G
	Species PEP_cyto @cyto:PEP() #PEP
	Species PYR_cyto @cyto:PYR() #PYR
	Species PYRmito_mito @mito:PYRmito() #PYRmito
	Species AcAld_cyto @cyto:AcAld() #AcAld
	Species GLCo_cyto @cyto:GLCo() #GLCo
	Species CO2_cyto @cyto:CO2() #CO2
	Species EtOH_cyto @cyto:EtOH() #EtOH
	Species Glycerol_cyto @cyto:Glycerol() #Glycerol
	Species Glycogen_cyto @cyto:Glycogen() #Glycogen
	Species Trehalose_cyto @cyto:Trehalose() #Trehalose
	Species Succinate_cyto @cyto:Succinate() #Succinate
	Species AcCoA_mito @mito:AcCoA() #AcCoA
	Species CO2mito_mito @mito:CO2mito() #CO2mito
end observables
begin functions
	fRate0() = 115.890632*WGD_E/(0.91*GLCi_cyto*GLCo_cyto + 1.1918*GLCi_cyto + 1.1918*GLCo_cyto + 1.42038724)
	fRate0m() = 115.890632*WGD_E/(0.91*GLCi_cyto*GLCo_cyto + 1.1918*GLCi_cyto + 1.1918*GLCo_cyto + 1.42038724)
	fRate1() = 1633.23*WGD_E/(0.012*ADP_cyto*G6P_cyto + 4.5*ADP_cyto*(GLCi_cyto + 0.08) + 6.9*ATP_cyto*GLCi_cyto + 0.552*ATP_cyto + 0.0184*G6P_cyto*(ATP_cyto + 0.15) + 1.035*GLCi_cyto + 0.0828)
	fRate1m() = 1633.23*WGD_E/(24.0*ADP_cyto*G6P_cyto + 9000.0*ADP_cyto*(GLCi_cyto + 0.08) + 13800.0*ATP_cyto*GLCi_cyto + 1104.0*ATP_cyto + 36.8*G6P_cyto*(ATP_cyto + 0.15) + 2070.0*GLCi_cyto + 165.6)
	fRate2() = 316.8*WGD_E/(1.4*F6P_cyto + 0.3*G6P_cyto + 0.42)
	fRate2m() = 316.8*WGD_E/(0.406*F6P_cyto + 0.087*G6P_cyto + 0.1218)
	fRate3() = 563.2*ATP_cyto*F6P_cyto*WGD_E*(72.112676056338*ATP_cyto*F6P_cyto + 1.40845070422535*ATP_cyto + 10.0*F6P_cyto + 1)/(0.0250768368430986*(0.849246231155779*AMP_cyto + 1)^2*(ATP_cyto + 0.0065)^2*(ATP_cyto + 0.236666666666667)^2*(0.140185357771565*F16bP_cyto + Fru2_6_P2_cyto + 0.0391954022988506)^2/((AMP_cyto + 0.0995)^2*(ATP_cyto + 0.65)^2*(0.00614414414414414*F16bP_cyto + Fru2_6_P2_cyto + 0.000682)^2) + 369.216901408451*(ATP_cyto*F6P_cyto + 0.01953125*ATP_cyto + 0.138671875*F6P_cyto + 0.0138671875)^2)
	fRate4() = 4545.12*WGD_E/(3.0*DHAP_cyto*GAP_cyto + 7.2*DHAP_cyto + 4.8*F16bP_cyto*GAP_cyto + 48.0*F16bP_cyto + 6.0*GAP_cyto + 14.4)
	fRate4m() = 4545.12*WGD_E/(0.207*DHAP_cyto*GAP_cyto + 0.4968*DHAP_cyto + 0.3312*F16bP_cyto*GAP_cyto + 3.312*F16bP_cyto + 0.414*GAP_cyto + 0.9936)
	fRate6() = 0.677376*WGD_E/(0.0189*BPG_cyto*NADH_cyto + 0.0126*BPG_cyto*(NAD_cyto + 0.09) + 0.000588*GAP_cyto*NAD_cyto + 5.292e-5*GAP_cyto + 0.000882*NADH_cyto*(GAP_cyto + 0.21) + 0.00012348*NAD_cyto + 1.11132e-5)
	fRate6m() = 126.9891*WGD_E/(0.0189*BPG_cyto*NADH_cyto + 0.001134*BPG_cyto + 0.000588*GAP_cyto*NAD_cyto + 0.000882*GAP_cyto*(NADH_cyto + 0.06) + 0.00018522*NADH_cyto + 0.0126*NAD_cyto*(BPG_cyto + 0.0098) + 1.11132e-5)
	fRate7() = 2472.96*WGD_E/(0.159*ADP_cyto*BPG_cyto + 0.0009*ADP_cyto*(P3G_cyto + 0.53) + 0.0006*ATP_cyto*P3G_cyto + 0.000318*ATP_cyto + 0.106*BPG_cyto*(ATP_cyto + 0.3) + 0.00018*P3G_cyto + 9.54e-5)
	fRate7m() = 0.7728*WGD_E/(0.159*ADP_cyto*BPG_cyto + 0.0009*ADP_cyto*(P3G_cyto + 0.53) + 0.0006*ATP_cyto*P3G_cyto + 0.000318*ATP_cyto + 0.106*BPG_cyto*(ATP_cyto + 0.3) + 0.00018*P3G_cyto + 9.54e-5)
	fRate8() = 206.8*WGD_E/(1.2*P2G_cyto + 0.08*P3G_cyto + 0.096)
	fRate8m() = 206.8*WGD_E/(0.228*P2G_cyto + 0.0152*P3G_cyto + 0.01824)
	fRate9() = 100.8*WGD_E/(0.5*P2G_cyto + 0.04*PEP_cyto + 0.02)
	fRate9m() = 100.8*WGD_E/(3.35*P2G_cyto + 0.268*PEP_cyto + 0.134)
	fRate10() = 31500.0*WGD_E/(31.5*ADP_cyto*PEP_cyto + 4.41*ADP_cyto + 0.0742*ATP_cyto*PYR_cyto + 11.13*ATP_cyto*(PEP_cyto + 0.14) + 16.695*PEP_cyto + 0.21*PYR_cyto*(ADP_cyto + 0.53) + 2.3373)
	fRate10m() = 31500.0*WGD_E/(204750.0*ADP_cyto*PEP_cyto + 28665.0*ADP_cyto + 482.3*ATP_cyto*PYR_cyto + 72345.0*ATP_cyto*(PEP_cyto + 0.14) + 108517.5*PEP_cyto + 1365.0*PYR_cyto*(ADP_cyto + 0.53) + 15192.45)
	fRate11() = 52.9735452258792*PYR_cyto^1.9*WGD_E/(0.061755123835252*PYR_cyto^1.9 + 1)
	fRate12() = 713.680605*WGD_E/(17.204*AcAld_cyto*EtOH_cyto*NADH_cyto + 3.0969*AcAld_cyto*EtOH_cyto*NAD_cyto + 1683.0*AcAld_cyto*(0.92*NADH_cyto + 0.11*NAD_cyto + 0.1012) + 3.40659*EtOH_cyto*NAD_cyto + 0.5791203*EtOH_cyto + 109.89*NADH_cyto*(0.17*EtOH_cyto + 15.64) + 57.91203*NAD_cyto + 53.2790676)
	fRate12m() = 713.680605*WGD_E/(0.001187076*AcAld_cyto*EtOH_cyto*NADH_cyto + 0.0002136861*AcAld_cyto*EtOH_cyto*NAD_cyto + 0.116127*AcAld_cyto*(0.92*NADH_cyto + 0.11*NAD_cyto + 0.1012) + 0.00023505471*EtOH_cyto*NAD_cyto + 3.99593007e-5*EtOH_cyto + 0.00758241*NADH_cyto*(0.17*EtOH_cyto + 15.64) + 0.00399593007*NAD_cyto + 0.0036762556644)
	fRate15() = 43.8123*WGD_E/(0.93*DHAP_cyto*NADH_cyto + 0.02139*DHAP_cyto + 0.0092*Glycerol_cyto*NAD_cyto + 0.372*Glycerol_cyto*(NADH_cyto + 0.023) + 0.372*NADH_cyto + 0.023*NAD_cyto*(DHAP_cyto + 0.4) + 0.008556)
	fRate15m() = 43.8123*WGD_E/(3999.0*DHAP_cyto*NADH_cyto + 91.977*DHAP_cyto + 39.56*Glycerol_cyto*NAD_cyto + 1599.6*Glycerol_cyto*(NADH_cyto + 0.023) + 1599.6*NADH_cyto + 98.9*NAD_cyto*(DHAP_cyto + 0.4) + 36.7908)
	fRate16() = 6.0
	fRate17() = 2.4
	fRate18() = 21.4*AcAld_cyto
	fRate19() = 1.0*t_m
	fRate19m() = 1.0*t_m
	fRate20() = 379.2*PYRmito_mito*WGD_E*(8.01 - 8.01/(1 + NAD_cyto/NADH_cyto))/(PYRmito_mito*(8.01 - 8.01/(1 + NAD_cyto/NADH_cyto)) + 160.0*PYRmito_mito + 1281.6*PYRmito_mito/(50.0 + 50.0*NAD_cyto/NADH_cyto) + 560.7 + 25632.0/(50.0 + 50.0*NAD_cyto/NADH_cyto) - 560.7/(1 + NAD_cyto/NADH_cyto))
end functions
begin reaction rules
	HXT: GLCo()@cyto <-> GLCi()@cyto fRate0(),fRate0m()
	HXK: GLCi()@cyto + ATP()@cyto <-> G6P()@cyto + ADP()@cyto fRate1(),fRate1m()
	PGI: G6P()@cyto <-> F6P()@cyto fRate2(),fRate2m()
	PFK_reactants_0: 0  -> ATP()@cyto -1*(fRate3()) #Modifiers(AMP, F26bP)
	PFK_reactants_1: 0  -> F6P()@cyto -1*(fRate3()) #Modifiers(AMP, F26bP)
	PFK_products_0: 0  -> ADP()@cyto fRate3() #Modifiers(AMP, F26bP)
	PFK_products_1: 0  -> F16bP()@cyto fRate3() #Modifiers(AMP, F26bP)
	FBA: F16bP()@cyto <-> DHAP()@cyto + GAP()@cyto fRate4(),fRate4m()
	TPI: DHAP()@cyto <-> GAP()@cyto r6_k1_6,r6_k2_6
	TDH: GAP()@cyto + NAD()@cyto <-> BPG()@cyto + NADH()@cyto fRate6(),fRate6m()
	PGK: ADP()@cyto + BPG()@cyto <-> ATP()@cyto + P3G()@cyto fRate7(),fRate7m()
	PGM: P3G()@cyto <-> P2G()@cyto fRate8(),fRate8m()
	ENO: P2G()@cyto <-> PEP()@cyto fRate9(),fRate9m()
	PYK: ADP()@cyto + PEP()@cyto <-> ATP()@cyto + PYR()@cyto fRate10(),fRate10m()
	PDC_reactants_0: 0  -> PYR()@cyto -1*(fRate11())
	PDC_products_0: 0  -> AcAld()@cyto fRate11()
	PDC_products_1: 0  -> CO2()@cyto fRate11()
	ADH: NAD()@cyto + EtOH()@cyto <-> NADH()@cyto + AcAld()@cyto fRate12(),fRate12m()
	ATPase: ATP()@cyto -> ADP()@cyto r14_Katpase_14
	AK: ADP()@cyto + ADP()@cyto <-> ATP()@cyto + AMP()@cyto r15_k1_15,r15_k2_15
	G3PDH: DHAP()@cyto + NADH()@cyto <-> NAD()@cyto + Glycerol()@cyto fRate15(),fRate15m()
	glycogen_branch_reactants_0: 0  -> ATP()@cyto -1*(fRate16())
	glycogen_branch_reactants_1: 0  -> G6P()@cyto -1*(fRate16())
	glycogen_branch_products_0: 0  -> ADP()@cyto fRate16()
	glycogen_branch_products_1: 0  -> Glycogen()@cyto fRate16()
	trehalose_synth_reactants_0: 0  -> ATP()@cyto -1*(fRate17())
	trehalose_synth_reactants_1: 0  -> G6P()@cyto -1*2.0*(fRate17())
	trehalose_synth_products_0: 0  -> ADP()@cyto fRate17()
	trehalose_synth_products_1: 0  -> Trehalose()@cyto fRate17()
	succinate_syn_reactants_0: 0  -> NAD()@cyto -1*3.0*(fRate18())
	succinate_syn_reactants_1: 0  -> AcAld()@cyto -1*2.0*(fRate18())
	succinate_syn_products_0: 0  -> NADH()@cyto 3.0*fRate18()
	succinate_syn_products_1: 0  -> Succinate()@cyto fRate18()
	PYR_shut: PYR()@cyto <-> PYRmito()@mito fRate19(),fRate19m()
	PDH_reactants_0: 0  -> PYRmito()@mito -1*(fRate20()) #Modifiers(NAD, NADH)
	PDH_products_0: 0  -> AcCoA()@mito fRate20() #Modifiers(NAD, NADH)
	PDH_products_1: 0  -> CO2mito()@mito fRate20() #Modifiers(NAD, NADH)
end reaction rules
end model
