###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL6655578762', 'http://identifiers.org/biomodels.db/BIOMD0000000187']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/18253502']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/pubmed/15694304']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0007094', 'http://identifiers.org/reactome/REACT_2137.2']
#@BQB_IS_PART_OF:['http://identifiers.org/kegg.pathway/hsa04110']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@creatorEmail:'lukas@ebi.ac.uk'
#@creatorName:'Endler Lukas'
#@notes:'This is a plain translation of an SBML model created on 14/08/2021. The original model has 11 molecules and 9 reactions. The translated model has 11 molecules and 9 rules'
###
begin model
begin parameters
	k3f 0.01 #units:ps
	kf6 1000.0 #units:pMps
	k5f 10000.0 #units:pMps
	k5r 0.2 #units:ps
	k2f 100000000.0 #units:pMps
	k1f 200000.0 #units:pMps
	k1r 0.2 #units:ps
	k4f 10000000.0 #units:pMps
	k4r 0.02 #units:ps
	k7f 100000000.0 #units:pMps
	k7bf 0.08 #units:ps
	k8f 5000000.0 #units:pMps
	k8r 0.08 #units:ps
	u 1.0 #units:dimensionless
	const_val_1 1.0 #units:dimensionless
	u_prime 0
	const_val_0 0
end parameters
begin molecule types
	Cdc20_C_Mad2()
	Bub3_BubR1()
	Cdc20()
	APC_Cdc20()
	Mad1_C_Mad2_O_Mad2m()
	MCC_APC()
	Mad1_C_Mad2()
	MCC()
	Bub3_BubR1_Cdc20()
	APC()
	O_Mad2()
end molecule types
begin seed species
	Mad1_C_Mad2() 3.011e+16 # 5e-08mol/L * 6.022e23/mol *1.0L #Mad1_C_Mad2 #Mad1_CMad2
	O_Mad2() 7.8286e+16 #original 1.3e-07mol/L  #O_Mad2 #OMad2
	Cdc20() 1.3248400000000002e+17 #original 2.2e-07mol/L  #Cdc20 #Cdc20
	Bub3_BubR1() 7.647940000000002e+16 #original 1.27e-07mol/L  #Bub3_BubR1 #Bub3_BubR1
	APC() 5.4198e+16 #original 9e-08mol/L  #APC #APC
end seed species
begin observables
	Species Mad1_C_Mad2 Mad1_C_Mad2() #Mad1:C-Mad2
	Species O_Mad2 O_Mad2() #O-Mad2
	Species Mad1_C_Mad2_O_Mad2m Mad1_C_Mad2_O_Mad2m() #Mad1:C-Mad2:O-Mad2*
	Species Cdc20 Cdc20() #Cdc20
	Species Cdc20_C_Mad2 Cdc20_C_Mad2() #Cdc20:C-Mad2
	Species Bub3_BubR1 Bub3_BubR1() #Bub3:BubR1
	Species MCC MCC() #MCC
	Species Bub3_BubR1_Cdc20 Bub3_BubR1_Cdc20() #Bub3:BubR1:Cdc20
	Species APC APC() #APC
	Species MCC_APC MCC_APC() #MCC:APC
	Species APC_Cdc20 APC_Cdc20() #APC:Cdc20
end observables
begin functions
	fRate0() = k1f*u
	fRate1() = k2f*u
	fRate3() = k4f*u
	fRate4() = k5f*u
	fRate6() = k7f*u
	fRate7() = k7bf*u_prime
end functions
begin reaction rules
	R1: Mad1_C_Mad2() + O_Mad2() <-> Mad1_C_Mad2_O_Mad2m() fRate0(),k1r
	R2: Mad1_C_Mad2_O_Mad2m() + Cdc20() -> Mad1_C_Mad2() + Cdc20_C_Mad2() fRate1()
	R3: Cdc20_C_Mad2() -> Cdc20() + O_Mad2() k3f
	R4: Cdc20_C_Mad2() + Bub3_BubR1() <-> MCC() fRate3(),k4r
	R5: Bub3_BubR1() + Cdc20() <-> Bub3_BubR1_Cdc20() fRate4(),k5r
	R6: O_Mad2() + Cdc20() -> Cdc20_C_Mad2() kf6
	R7: MCC() + APC() -> MCC_APC() fRate6()
	R7b: MCC_APC() -> O_Mad2() + Bub3_BubR1() + APC_Cdc20() fRate7()
	R8: APC() + Cdc20() <-> APC_Cdc20() k8f,k8r
end reaction rules
end model
