###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL6812345601', 'http://identifiers.org/biomodels.db/BIOMD0000000190']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/16709566']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9989', 'http://identifiers.org/taxonomy/40674']
#@BQB_IS_VERSION_OF:['http://identifiers.org/obo.go/GO:0006595']
#@creatorEmail:'lukas@ebi.ac.uk'
#@creatorName:'Endler Lukas'
#@notes:'This is a plain translation of an SBML model created on 14/08/2021. The original model has 11 molecules and 13 reactions. The translated model has 15 molecules and 18 rules'
###
begin model
begin parameters
	Keq 1.0 #units:uM_1
	Kdodc 0.05 #units:uM_1
	Ksodc 5.0 #units:uM_min_2
	Kdssat 0.2 #units:min_1
	Ksssat 0.001 #units:uM_min_2
	Kdsamdc 0.02 #units:min_1
	Kssamdc 1.0 #units:uM_min_2
	Kdantz 0.02 #units:min_1
	Ksantz 0.02 #units:uM_min_2
	R 0.004 #units:min_1
	C 4.44 #units:dimensionless
	r1_Kipodc 1300.000000
	r1_Kmodc 60.000000
	r2_Kapsamdc 0.500000
	r2_Kiasamdc 2.500000
	r2_Kissamdc 500.000000
	r2_Kmsamdc 50.000000
	r3_Kmaccoassat 1.500000
	r3_Kmcoassat 40.000000
	r3_Kmdssat 130.000000
	r3_Kmsssat 35.000000
	r4_Kmaccoassat 1.500000
	r4_Kmcoassat 40.000000
	r4_Kmdssat 130.000000
	r4_Kmsssat 35.000000
	r5_Kmadpao 14.000000
	r5_Kmaspao 0.600000
	r5_Kmdpao 50.000000
	r5_Kmspao 15.000000
	r5_Vmpao 10.350000
	r6_Kmadpao 14.000000
	r6_Kmaspao 0.600000
	r6_Kmdpao 50.000000
	r6_Kmspao 15.000000
	r6_Vmpao 10.350000
	r7_KaSpds 0.300000
	r7_Kiaspds 0.800000
	r7_Kidspds 100.000000
	r7_Kpspds 40.000000
	r7_Vmspds 10.950000
	r8_Kaspms 0.100000
	r8_Kdspms 60.000000
	r8_Kiaspms 0.060000
	r8_Kisspms 25.000000
	r8_Vmspms 3.230000
	r9_Kimetmat 50.000000
	r9_Kmmat 41.000000
	r9_Vmmat 0.450000
	r12_Kpefflux 0.010000
	r13_Kadefflux 0.010000
end parameters
begin molecule types
	Spermidine()
	L_Ornithine()
	S_adenosyl_L_methionine()
	Acetyl_CoA()
	N1_Acetylspermidine()
	Methionine()
	Putrescine()
	CoA()
	S_adenosylmethioninamine()
	N1_Acetylspermine()
	Spermine()
	Vmaxodc
	Vmaxssat
	Vmaxsamdc
	Antz
end molecule types
begin seed species
	S_adenosyl_L_methionine() 6022000000000000.0 # (0.01 * 1e-06)mol/L * 6.022e23/mol *1.0L #S_adenosyl_L_methionine #SAM
	S_adenosylmethioninamine() 6022000000000000.0 #original 0.01µmole/L #S_adenosylmethioninamine #A
	Putrescine() 6022000000000000.0 #original 0.01µmole/L #Putrescine #P
	Spermine() 6022000000000000.0 #original 0.01µmole/L #Spermine #S
	Spermidine() 6022000000000000.0 #original 0.01µmole/L #Spermidine #D
	N1_Acetylspermine() 6022000000000000.0 #original 0.01µmole/L #N1_Acetylspermine #aS
	N1_Acetylspermidine() 6022000000000000.0 #original 0.01µmole/L #N1_Acetylspermidine #aD
	$Methionine() 3.011e+19 #original 50.0µmole/L #Methionine #Met
	$L_Ornithine() 1.8066e+20 #original 300.0µmole/L #L_Ornithine #ORN
	$Acetyl_CoA() 2.37869e+19 #original 39.5µmole/L #Acetyl_CoA #AcCoA
	$CoA() 9.6352e+19 #original 160.0µmole/L #CoA #CoA
	Vmaxodc 1.27905671844446 #units:uM_min_1
	Vmaxssat 0.677298510125025 #units:uM_min_1
	Vmaxsamdc 0.367465856805639 #units:uM_min_1
	Antz 0.574589492832405 #units:uM_min_1
end seed species
begin observables
	Species S_adenosyl_L_methionine S_adenosyl_L_methionine() #S-adenosyl-L-methionine
	Species S_adenosylmethioninamine S_adenosylmethioninamine() #S-adenosylmethioninamine
	Species Putrescine Putrescine() #Putrescine
	Species Spermine Spermine() #Spermine
	Species Spermidine Spermidine() #Spermidine
	Species N1_Acetylspermine N1_Acetylspermine() #N1-Acetylspermine
	Species N1_Acetylspermidine N1_Acetylspermidine() #N1-Acetylspermidine
	Species Methionine Methionine() #Methionine
	Species L_Ornithine L_Ornithine() #L-Ornithine
	Species Acetyl_CoA Acetyl_CoA() #Acetyl-CoA
	Species CoA CoA() #CoA
	Species Vmaxodc Vmaxodc
	Species Vmaxssat Vmaxssat
	Species Vmaxsamdc Vmaxsamdc
	Species Antz Antz
end observables
begin functions
	arRateAntz() = -Antz*Kdantz + Ksantz*(1 - 1/(0.01*Keq*(Spermidine + Spermine) + 1))
	arRateVmaxsamdc() = -Kdsamdc*Vmaxsamdc + Kssamdc/(Keq*(Spermidine + Spermine) + 1)
	arRateVmaxssat() = -Kdssat*Vmaxssat/(Keq*(Spermidine + Spermine) + 1) + Ksssat*(1 - 1/(Keq*(Spermidine + Spermine) + 1))
	arRateVmaxodc() = -Antz*Kdodc*Vmaxodc + Ksodc/(Keq*(Spermidine + Spermine) + 1)
	Kcoa() = 3*R
	Kaccoa() = R
	fRate0() = 1300.0*Vmaxodc/(1300.0*L_Ornithine + 60.0*Putrescine + 78000.0)
	fRate1() = 1250.0*Putrescine*Vmaxsamdc/(50.0*Putrescine*S_adenosylmethioninamine*Spermine + 25000.0*Putrescine*S_adenosylmethioninamine + 2.5*Putrescine*Spermine*(S_adenosyl_L_methionine + 50.0) + 1250.0*Putrescine*(S_adenosyl_L_methionine + 50.0) + 62.5*Spermine + 31250.0)
	fRate2() = 5200.0*Vmaxssat/(C*(5200.0*Acetyl_CoA*Spermine + 182000.0*Acetyl_CoA + 52.5*CoA*Spermidine + 195.0*CoA*(Spermine + 35.0) + 1400.0*Spermidine*(Acetyl_CoA + 1.5) + 7800.0*Spermine + 273000.0))
	fRate3() = 1400.0*Vmaxssat/(1400.0*Acetyl_CoA*Spermidine + 182000.0*Acetyl_CoA + 195.0*CoA*Spermine + 52.5*CoA*(Spermidine + 130.0) + 2100.0*Spermidine + 5200.0*Spermine*(Acetyl_CoA + 1.5) + 273000.0)
	fRate4() = 10.35/(N1_Acetylspermidine + 23.3333333333333*N1_Acetylspermine + 0.28*Spermidine + 0.933333333333333*Spermine + 14.0)
	fRate5() = 10.35/(0.0428571428571429*N1_Acetylspermidine + N1_Acetylspermine + 0.012*Spermidine + 0.04*Spermine + 0.6)
	fRate6() = 1095.0/(100.0*Putrescine*S_adenosylmethioninamine + 0.3*Putrescine*Spermidine + 30.0*Putrescine + 4000.0*S_adenosylmethioninamine + 32.0*Spermidine + 3200.0)
	fRate7() = 80.75/(25.0*S_adenosylmethioninamine*Spermidine + 1500.0*S_adenosylmethioninamine + 0.1*Spermidine*Spermine + 2.5*Spermidine + 3.6*Spermine + 90.0)
	fRate8() = 0.45/(1 + (0.82*S_adenosyl_L_methionine + 41.0)/Methionine)
end functions
begin reaction rules
	ODC: L_Ornithine() -> Putrescine() fRate0()
	SAMdc: S_adenosyl_L_methionine() -> S_adenosylmethioninamine() fRate1() #Modifiers(S, P)
	SSAT_for_S: Spermine() + Acetyl_CoA() -> N1_Acetylspermine() + CoA() fRate2() #Modifiers(D)
	SSAT_for_D: Spermidine() + Acetyl_CoA() -> N1_Acetylspermidine() + CoA() fRate3() #Modifiers(S)
	PAO_for_aD: N1_Acetylspermidine() -> Putrescine() fRate4() #Modifiers(aS, D, S)
	PAO_for_aS: N1_Acetylspermine() -> Spermidine() fRate5() #Modifiers(aD, S)
	SpdS: S_adenosylmethioninamine() + Putrescine() -> Spermidine() fRate6()
	SpmS: S_adenosylmethioninamine() + Spermidine() -> Spermine() fRate7()
	MAT_reactants_0: 0  -> Methionine() -1*(fRate8())
	MAT_products_0: 0  -> S_adenosyl_L_methionine() fRate8()
	VCoA: Acetyl_CoA() -> CoA() Kcoa
	VacCoA: CoA() -> Acetyl_CoA() Kaccoa
	P_efflux: Putrescine() -> 0  r12_Kpefflux
	aD_efflux: N1_Acetylspermidine() -> 0  r13_Kadefflux
	0  -> Vmaxodc() arRateVmaxodc #rateLaw
	0  -> Vmaxssat() arRateVmaxssat #rateLaw
	0  -> Vmaxsamdc() arRateVmaxsamdc #rateLaw
	0  -> Antz() arRateAntz #rateLaw
end reaction rules
end model
