###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000205', 'http://identifiers.org/biomodels.db/MODEL7802538336']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/18505685']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/biomodels.db/BIOMD0000000019', 'http://identifiers.org/biomodels.db/BIOMD0000000049', 'http://identifiers.org/biomodels.db/BIOMD0000000048', 'http://identifiers.org/pubmed/16687399', 'http://identifiers.org/pubmed/11024454', 'http://identifiers.org/pubmed/14751248']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0007173', 'http://identifiers.org/go/GO:0006897']
#@BQB_IS_PART_OF:['http://identifiers.org/kegg.pathway/hsa04070', 'http://identifiers.org/kegg.pathway/hsa04010']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/2759']
#@creatorEmail:'hdharuri@cds.caltech.edu'
#@creatorName:'Dharuri Harish'
#@notes:'This is a plain translation of an SBML model created on 13/08/2021. The original model has 194 molecules and 205 reactions. The translated model has 194 molecules and 205 rules'
###
begin model
begin parameters
	r1_k1 100.000000
	r1_k2 0.003800
	r2_k1 10.000000
	r2_k2 0.020000
	r3_k1 2.014000
	r4_k1 3.140000
	r4_k2 0.200000
	r5_k1 0.266100
	r6_k1 90.000000
	r6_k2 0.600000
	r7_k1 0.583800
	r8_k1 4.481000
	r8_k2 0.300000
	r9_k1 3.114000
	r9_k2 0.200000
	r10_k1 0.266100
	r11_k1 3.000000
	r11_k2 0.100000
	r12_k1 10.000000
	r12_k2 0.021400
	r13_k1 0.100000
	r13_k2 0.001500
	r14_k1 10.000000
	r14_k2 0.045000
	r15_k1 202.900000
	r15_k2 0.180000
	r16_k1 0.143400
	r17_k1 3.000000
	r17_k2 0.050000
	r18_k1 10.000000
	r18_k2 0.060000
	r19_k1 2.734000
	r19_k2 0.025000
	r20_k1 202.900000
	r20_k2 0.180000
	r21_k1 0.143400
	r22_k1 1.754000
	r22_k2 0.050000
	r23_k1 0.762400
	r24_k1 4.000000
	r24_k2 0.018330
	r25_k1 3.500000
	r26_k1 4.000000
	r26_k2 0.018330
	r27_k1 2.900000
	r28_k1 3.000000
	r28_k2 0.033000
	r29_k1 16.000000
	r30_k1 3.000000
	r30_k2 0.033000
	r31_k1 5.700000
	r32_k1 71.700000
	r32_k2 0.200000
	r33_k1 1.000000
	r34_k1 14.300000
	r34_k2 0.800000
	r35_k1 0.058000
	r36_k1 0.250000
	r36_k2 0.500000
	r37_k1 0.058000
	r38_k1 7.000000
	r38_k2 0.600000
	r39_k1 0.270000
	r40_k1 5.000000
	r40_k2 0.500000
	r41_k1 0.300000
	r42_k1 0.000017
	r43_k1 2.854000
	r43_k2 0.960000
	r44_k1 7.600000
	r45_k1 8.898000
	r45_k2 0.100000
	r46_k1 0.426000
	r47_k1 8.898000
	r47_k2 0.100000
	r48_k1 0.426000
	r49_k1 0.002000
	r50_k1 14.000000
	r50_k2 0.174300
	r51_k1 33.720000
	r52_k1 1.000000
	r52_k2 0.038000
	r53_k1 0.595000
	r54_k1 25.000000
	r54_k2 3.500000
	r55_k1 25.000000
	r56_k1 3.000000
	r56_k2 1.000000
	r57_k1 3.000000
	r57_k2 1.000000
	r58_k1 3.000000
	r59_k1 0.001000
	r59_k2 10.000000
	r60_k1 1.000000
	r60_k2 0.900000
	r61_k1 0.001000
	r62_k1 3.000000
	r62_k2 0.500000
	r63_k1 3.000000
	r64_k1 0.001000
	r65_k1 1.100000
	r65_k2 0.033000
	r66_k1 16.000000
	r67_k1 5.000000
	r67_k2 0.500000
	r68_k1 5.000000
	r69_k1 0.129800
	r70_k1 17.000000
	r71_k1 10.000000
	r71_k2 0.021400
	r72_k1 2.029000
	r72_k2 0.180000
	r73_k1 0.143400
	r74_k1 2.845000
	r74_k2 0.960000
	r75_k1 0.262000
	r76_k1 2.845000
	r76_k2 0.960000
	r77_k1 1.205000
	r78_k1 20.290000
	r78_k2 0.180000
	r79_k1 20.290000
	r79_k2 0.180000
	r80_k1 4.980000
	r81_k1 0.262000
	r82_k1 0.100000
	r82_k2 0.010000
	r83_k1 2.854000
	r83_k2 0.960000
	r84_k1 7.760000
	r85_k1 10.000000
	r85_k2 1.000000
	r86_k1 10.000000
	r86_k2 1.000000
	r87_k1 2.661000
	r88_k1 2.661000
	r89_k1 3.114000
	r89_k2 0.200000
	r90_k1 2.661000
	r91_k1 3.114000
	r91_k2 0.200000
	r92_k1 2.661000
	r93_k1 3.114000
	r93_k2 0.200000
	r94_k1 2.661000
	r95_k1 3.114000
	r95_k2 0.200000
	r96_k1 2.661000
	r97_k1 3.114000
	r97_k2 0.200000
	r98_k1 2.661000
	r99_k1 40.000000
	r99_k2 0.935600
	r100_k1 10.000000
	r101_k1 0.129800
	r102_k1 40.000000
	r102_k2 0.935600
	r103_k1 10.000000
	r104_k1 2.845000
	r104_k2 0.960000
	r105_k1 1.205000
	r106_k1 1.754000
	r106_k2 0.500000
	r107_k1 7.624000
	r108_k1 40.000000
	r108_k2 0.935600
	r109_k1 40.000000
	r110_k1 0.001000
	r110_k2 0.000330
	r111_k1 1.000000
	r111_k2 1.000000
	r112_k1 0.010000
	r113_k1 0.100000
	r113_k2 1.298700
	r114_k1 0.500000
	r114_k2 0.005000
	r115_k1 0.500000
	r115_k2 0.005000
	r116_k1 5.000000
	r116_k2 0.010000
	r117_k1 5.000000
	r117_k2 0.010000
	r118_k1 0.001000
	r119_k1 0.001000
	r120_k1 0.005000
	r121_k1 1.100000
	r121_k2 0.033000
	r122_k1 16.000000
	r123_k1 10.000000
	r123_k2 0.005000
	r124_k1 129.800000
	r125_k1 1.754000
	r125_k2 0.050000
	r126_k1 0.076240
	r127_k1 8.898000
	r127_k2 1.000000
	r128_k1 0.426000
	r129_k1 3.000000
	r129_k2 0.050000
	r130_k1 3.000000
	r130_k2 0.100000
	r131_k1 3.000000
	r131_k2 0.500000
	r132_k1 5.000000
	r132_k2 1.670000
	r133_k1 1.693000
	r134_k1 1.693000
	r135_k1 1.670000
	r135_k2 5.000000
	r136_k1 5.000000
	r136_k2 1.670000
	r137_k1 1.693000
	r138_k1 1.693000
	r139_k1 1.670000
	r139_k2 5.000000
	r140_k1 1.667000
	r140_k2 0.500000
	r141_k1 5.000000
	r141_k2 1.670000
	r142_k1 1.693000
	r143_k1 1.693000
	r144_k1 1.670000
	r144_k2 5.000000
	r145_k1 1.667000
	r145_k2 0.500000
	r146_k1 5.000000
	r146_k2 1.670000
	r147_k1 1.693000
	r148_k1 1.693000
	r149_k1 1.670000
	r149_k2 5.000000
	r150_k1 1.667000
	r150_k2 0.500000
	r151_k1 5.000000
	r151_k2 1.670000
	r152_k1 1.693000
	r153_k1 1.693000
	r154_k1 1.670000
	r154_k2 5.000000
	r155_k1 1.667000
	r155_k2 0.500000
	r156_k1 5.000000
	r156_k2 1.670000
	r157_k1 1.693000
	r158_k1 1.693000
	r159_k1 1.670000
	r159_k2 5.000000
	r160_k1 5.000000
	r160_k2 1.670000
	r161_k1 0.100200
	r162_k1 0.100200
	r163_k1 1.670000
	r164_k1 5.000000
	r164_k2 1.670000
	r165_k1 0.100200
	r166_k1 0.100200
	r167_k1 1.670000
	r168_k1 1.667000
	r168_k2 0.500000
	r169_k1 5.000000
	r169_k2 1.670000
	r170_k1 1.693000
	r171_k1 1.693000
	r172_k1 1.670000
	r172_k2 5.000000
	r173_k1 1.667000
	r173_k2 0.500000
	r174_k1 5.000000
	r174_k2 1.670000
	r175_k1 1.693000
	r176_k1 1.693000
	r177_k1 1.670000
	r177_k2 5.000000
	r178_k1 16.670000
	r178_k2 0.050000
	r179_k1 16.670000
	r179_k2 0.050000
	r180_k1 16.670000
	r180_k2 0.050000
	r181_k1 16.670000
	r181_k2 0.050000
	r182_k1 5.000000
	r182_k2 1.670000
	r183_k1 0.100200
	r184_k1 0.100200
	r185_k1 1.670000
	r186_k1 5.000000
	r186_k2 1.670000
	r187_k1 0.100200
	r188_k1 0.100200
	r189_k1 1.670000
	r190_k1 5.000000
	r190_k2 1.670000
	r191_k1 0.100200
	r192_k1 0.100200
	r193_k1 1.670000
	r194_k1 5.000000
	r194_k2 1.670000
	r195_k1 0.100200
	r196_k1 0.100200
	r197_k1 1.670000
	r198_k1 1.667000
	r198_k2 0.500000
	r199_k1 1.205000
	r200_k1 1.667000
	r200_k2 0.500000
	r201_k1 1.205000
	r202_k1 1.667000
	r202_k2 0.500000
	r203_k1 1.205000
	r204_k1 1.667000
	r204_k2 0.500000
	r205_k1 1.205000
end parameters
begin molecule types
	RhoGDP_RhoGDI()
	Grb2_MEKK1abcdef()
	EGF_pEGFR_2_pShc_Grb2_SOS()
	EGF_pEGFR_2_Grb2_MEKK1abppMEKcERKdefRasGTP()
	EGF_pEGFR_2_pShc_Grb2_SHP2_pRhoGEF()
	Grb2()
	Grb2_SOS()
	RasGTP_RasGAP()
	ROK()
	pSrc_TP7()
	EGF_pEGFR_2_Grb2_MEKK1abppMEKcdRhoGTPef()
	RacGDP()
	PIP2()
	RhoGDP_pRhoGEF()
	RhoGEF()
	EGF_pEGFR_2_pShc_Grb2_MEKK1abcdef()
	pShc_SHP()
	RasGDP()
	ppRaf()
	Raf()
	EGF_pEGFR_2_Grb2_SOS_Cbl_CIN85_EPn()
	ppERK_pROK()
	SOS()
	EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcppERKdef()
	EGF_pEGFR_2_Grb2_MEKK1aRafbpMEKcdef()
	EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPef()
	pERK_MKP3()
	SHP2()
	EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcERKdefRasGTP()
	RhoGDP()
	EGF_pEGFR_2_Grb2_MEKK1aRafbcdef()
	EGF_pEGFR_2_Grb2_SOS()
	ppMEK_PP2A()
	EGF_pEGFR_2_Grb2_SHP2_pRhoGEF()
	pRaf_MEK()
	RhoGDI_RacGDP()
	Raf_RasGTP()
	EGF_EGFR_2()
	EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdef()
	EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcERKdef()
	EGF_pEGFR_2_Grb2_SOS_Cbl_CIN85()
	EGF_pEGFR_2_pShc_Grb2_SHP2_pRhoGAP()
	RacGEF()
	ERK()
	EGF_pEGFR_2_pShc_Grb2_MEKK1abpMEKcdef()
	EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcppERKdef()
	pERK()
	EGF_pEGFR_2_Grb2_MEKK1abppMEKcpERKdef()
	RacGAP()
	pPI3K()
	EGF_pEGFR2_RasGAP()
	ppMEK_ERK()
	Src()
	EGF_pEGFR_2_pShc_Grb2_SOS_Cbl_CIN85_EPn()
	pPI3K_PIP2()
	EGFR()
	EGF_pEGFR_2_SHP()
	EGF_pEGFR_2_Grb2_SHP2_pRhoGAP()
	RasGTP()
	EGF_pEGFR_2_degrade()
	EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPef()
	EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcpERKdef()
	EGF_pEGFR_2_Grb2()
	pShc_Grb2_SOS()
	EGF_pEGFR_2_Shc()
	EGF_pEGFR_2_Grb2_MEKK1abppMEKcdefRasGTP()
	MEKK1abcdef()
	MPase()
	ppERK_MKP3()
	EGF_pEGFR_2_pShc_Grb2_SOS_Cbl_CIN85()
	pROK_PTEN()
	EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcERKdef()
	EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdRhoGTPef()
	PIP3_RacGEF()
	EGF_pEGFR_2_Grb2_MEKK1abMEKcdef()
	EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcpERKdef()
	pRaf()
	EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcdef()
	EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcdef()
	Akt_PIP3()
	pPI3K_TP4()
	EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdRhoGTPef()
	Ras_GTP_RhoGEF()
	EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcdRhoGTPepRhoGAPf()
	Takt()
	PDK1()
	Shc()
	Pase()
	EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbpMEKcdef()
	EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPepRhoGAPf()
	EGF_pEGFR_2_Grb2_MEKK1abppMEKcppERKdef()
	pSOS()
	pRhoGAP_RhoGTP()
	pAkt_PIP3()
	ppMEK_pERK()
	pShc()
	PIP3_RacGEF_RacGDP()
	EGF_pEGFR_2_Grb2_MEKK1abpMEKcdef()
	EGF_pEGFR_2_Grb2_SHP2()
	pSrc_RhoGEF()
	EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdefRasGTP()
	EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPepRhoGAPf()
	EGF_pEGFR_2_pShc_Grb2()
	pEPn_Mpase()
	EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdef()
	EGF_pEGFR_2_pShc_Grb2_MEKK1abcdefRasGTP()
	EGF_pEGFR_2_Grb2_MEKK1abcdef()
	ppERK_EGF_pEGFR_2_pShc_Grb2_SOS()
	pAkt()
	EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdefRasGTP()
	EGF_pEGFR_2_Grb2_MEKK1abMEKcdefRasGTP()
	EGF_pEGFR_2_Grb2_MEKK1abppMEKcERKdef()
	EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbMEKcdRhoGTPef()
	pSrc_RhoGAP()
	pROK()
	EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcdRhoGTPepRhoGAPf()
	EGF_pEGFR_2_pShc_Grb2_SHP2()
	EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbpMEKcdef()
	pRaf_Pase()
	EGF_pEGFR_2_Grb2_MEKK1abppMEKcpERKdefRasGTP()
	pEPn()
	PI3K()
	TP7()
	pPTEN_PIP3()
	EPn()
	EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcpERKdefRasGTP()
	EGF_pEGFR_2_Grb2_MEKK1abppMEKcdef()
	Cbl_CIN85()
	pRaf_pMEK()
	EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcppERKdefRasGTP()
	EGF_pEGFR_2_Src()
	EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcpERKdef()
	EGF_pEGFR_2_pShc_Grb2_SOS_RasGDP()
	Akt()
	EGF_pEGFR_2_RasGAP()
	pPTEN()
	EGF_pEGFR_2_Grb2_MEKK1abMEKcdRhoGTPef()
	EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbMEKcdef()
	EGF_pEGFR_2_Grb2_MEKK1aRafbMEKcdef()
	pRhoGAP()
	pMEK()
	pRhoGEF()
	EGF_pEGFR_2_Grb2_MEKK1apRafbMEKcdef()
	TP4()
	EGF_pEGFR_2_Grb2_SOS_RasGDP()
	EGF_pEGFR_2_pShc()
	PTEN()
	EGF_pEGFR_2_Grb2_MEKK1abpMEKcdefRasGTP()
	EGF_pEGFR_2_pShc_Grb2_MEKK1abpMEKcdefRasGTP()
	EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbppMEKcdef()
	EGF_pEGFR_2()
	pSrc()
	RasGAP()
	EGF_pEGFR_2_Grb2_MEKK1abppMEKcppERKdefRasGTP()
	ppMEK()
	PIP3()
	ppERK()
	pRaf_pAkt_PIP3()
	Src_TP7()
	pROK_EPn()
	EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbcdef()
	PP2A()
	EGF_pEGFR_2_Grb2_MEKK1aRafbMEKcdRhoGTPef()
	EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdef()
	EGF_pEGFR_2_Grb2_MEKK1apRafbcdef()
	EGF_pEGFR_2_Grb2_MEKK1abcdefRasGTP()
	MKP3()
	SHP()
	RhoGTP()
	EGF()
	EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcERKdef()
	Pro_EGFR()
	RhoGAP()
	RacGTP_RacGAP()
	MEK()
	EGF_pEGFR_2_PI3K()
	EGF_pEGFR_2_RasGAP_RasGTP()
	EGF_pEGFF_2()
	EGF_pEGRF_2()
	EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcppERKdef()
	EGF_pEGFR_2_Grb2_MEKK1apRafbppMEKcdef()
	RhoGDI()
	EGF_pEGFR_2_Grb2_MEKK1apRafbpMEKcdef()
	ppERK_EGF_pEGFR_2_Grb2_SOS()
	EGF_pEGFR_2_RasGAP_SHP2()
	pMEK_PP2A()
	pAkt_PIP3_Takt()
	RhoGTP_ROK()
	EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbMEKcdef()
	Akt_PIP3_PDK1()
	RacGTP()
	pEPn_MPase()
	EGF_EGFR()
	EGF_pEGFR_2_pSrc()
end molecule types
begin seed species
	EGF() 4936052740000000.0 # (0.0081967 * 1e-06)mol/L * 6.022e23/mol *1.0L #EGF #species_0
	EGFR() 1.8066e+17 #original 0.3/L  #EGFR #species_1
	SHP() 6.022e+16 #original 0.1/L  #SHP #species_5
	Shc() 6.022e+17 #original 1.0/L  #Shc #species_7
	Grb2() 6.022e+17 #original 1.0/L  #Grb2 #species_12
	SOS() 1.8066e+17 #original 0.3/L  #SOS #species_14
	RasGDP() 9.033e+16 #original 0.15/L  #RasGDP #species_17
	Raf() 3.011e+17 #original 0.5/L  #Raf #species_23
	MEK() 4.0949600000000006e+17 #original 0.68/L  #MEK #species_26
	ERK() 2.4088e+17 #original 0.4/L  #ERK #species_31
	Pase() 3.011e+17 #original 0.5/L  #Pase #species_36
	PP2A() 1.2044e+16 #original 0.02/L  #PP2A #species_38
	MKP3() 1204400000000000.2 #original 0.002/L  #MKP3 #species_41
	RasGAP() 6.022e+16 #original 0.1/L  #RasGAP #species_44
	PI3K() 6022000000000000.0 #original 0.01/L  #PI3K #species_49
	TP4() 1.2044e+17 #original 0.2/L  #TP4 #species_53
	PIP2() 3.011e+17 #original 0.5/L  #PIP2 #species_55
	PIP3() 3.011e+17 #original 0.5/L  #PIP3 #species_57
	Akt() 6.022e+16 #original 0.1/L  #Akt #species_58
	PDK1() 6.022e+16 #original 0.1/L  #PDK1 #species_60
	Takt() 6.022e+16 #original 0.1/L  #Takt #species_64
	PTEN() 6.022e+16 #original 0.1/L  #PTEN #species_69
	RacGEF() 6.022e+16 #original 0.1/L  #RacGEF #species_73
	RacGDP() 1.2044e+17 #original 0.2/L  #RacGDP #species_75
	RhoGDI() 6.022e+16 #original 0.1/L  #RhoGDI #species_78
	RacGAP() 6.022e+16 #original 0.1/L  #RacGAP #species_80
	RhoGDP() 9.033e+16 #original 0.15/L  #RhoGDP #species_82
	SHP2() 6.022e+16 #original 0.1/L  #SHP2 #species_90
	RhoGEF() 6.022e+16 #original 0.1/L  #RhoGEF #species_94
	RhoGAP() 3.011e+17 #original 0.5/L  #RhoGAP #species_97
	ROK() 4.0949600000000006e+17 #original 0.68/L  #ROK #species_105
	Src() 3.119396e+17 #original 0.518/L  #Src #species_107
	TP7() 3.119396e+17 #original 0.518/L  #TP7 #species_111
	Cbl_CIN85() 4.8176e+17 #original 0.8/L  #Cbl_CIN85 #species_114
	EPn() 3.011e+17 #original 0.5/L  #EPn #species_117
	Pro_EGFR() 1.8066e+21 #original 3000.0/L  #Pro_EGFR #species_122
	MPase() 6.022e+17 #original 1.0/L  #MPase #species_125
	MEKK1abcdef() 3.011e+17 #original 0.5/L  #MEKK1abcdef #species_130
end seed species
begin observables
	Species EGF EGF() #EGF
	Species EGFR EGFR() #EGFR
	Species EGF_EGFR EGF_EGFR() #EGF-EGFR
	Species EGF_EGFR_2 EGF_EGFR_2() #EGF-EGFR-2
	Species EGF_pEGFR_2 EGF_pEGFR_2() #EGF-pEGFR-2
	Species SHP SHP() #SHP
	Species EGF_pEGFR_2_SHP EGF_pEGFR_2_SHP() #EGF-pEGFR-2-SHP
	Species Shc Shc() #Shc
	Species EGF_pEGFR_2_Shc EGF_pEGFR_2_Shc() #EGF-pEGFR-2-Shc
	Species EGF_pEGFR_2_pShc EGF_pEGFR_2_pShc() #EGF-pEGFR-2-pShc
	Species pShc pShc() #pShc
	Species pShc_SHP pShc_SHP() #pShc-SHP
	Species Grb2 Grb2() #Grb2
	Species EGF_pEGFR_2_pShc_Grb2 EGF_pEGFR_2_pShc_Grb2() #EGF-pEGFR-2-pShc-Grb2
	Species SOS SOS() #SOS
	Species EGF_pEGFR_2_pShc_Grb2_SOS EGF_pEGFR_2_pShc_Grb2_SOS() #EGF-pEGFR-2-pShc-Grb2-SOS
	Species Grb2_SOS Grb2_SOS() #Grb2-SOS
	Species RasGDP RasGDP() #RasGDP
	Species EGF_pEGFR_2_pShc_Grb2_SOS_RasGDP EGF_pEGFR_2_pShc_Grb2_SOS_RasGDP() #EGF-pEGFR-2-pShc-Grb2-SOS-RasGDP
	Species RasGTP RasGTP() #RasGTP
	Species EGF_pEGFR_2_Grb2 EGF_pEGFR_2_Grb2() #EGF-pEGFR-2-Grb2
	Species EGF_pEGFR_2_Grb2_SOS EGF_pEGFR_2_Grb2_SOS() #EGF-pEGFR-2-Grb2-SOS
	Species EGF_pEGFR_2_Grb2_SOS_RasGDP EGF_pEGFR_2_Grb2_SOS_RasGDP() #EGF-pEGFR-2-Grb2-SOS-RasGDP
	Species Raf Raf() #Raf
	Species Raf_RasGTP Raf_RasGTP() #Raf-RasGTP
	Species pRaf pRaf() #pRaf
	Species MEK MEK() #MEK
	Species pRaf_MEK pRaf_MEK() #pRaf-MEK
	Species pMEK pMEK() #pMEK
	Species pRaf_pMEK pRaf_pMEK() #pRaf-pMEK
	Species ppMEK ppMEK() #ppMEK
	Species ERK ERK() #ERK
	Species ppMEK_ERK ppMEK_ERK() #ppMEK-ERK
	Species pERK pERK() #pERK
	Species ppMEK_pERK ppMEK_pERK() #ppMEK-pERK
	Species ppERK ppERK() #ppERK
	Species Pase Pase() #Pase
	Species pRaf_Pase pRaf_Pase() #pRaf-Pase
	Species PP2A PP2A() #PP2A
	Species ppMEK_PP2A ppMEK_PP2A() #ppMEK-PP2A
	Species pMEK_PP2A pMEK_PP2A() #pMEK-PP2A
	Species MKP3 MKP3() #MKP3
	Species ppERK_MKP3 ppERK_MKP3() #ppERK-MKP3
	Species pERK_MKP3 pERK_MKP3() #pERK-MKP3
	Species RasGAP RasGAP() #RasGAP
	Species RasGTP_RasGAP RasGTP_RasGAP() #RasGTP-RasGAP
	Species ppERK_EGF_pEGFR_2_pShc_Grb2_SOS ppERK_EGF_pEGFR_2_pShc_Grb2_SOS() #ppERK-EGF-pEGFR-2-pShc-Grb2-SOS
	Species pSOS pSOS() #pSOS
	Species ppERK_EGF_pEGFR_2_Grb2_SOS ppERK_EGF_pEGFR_2_Grb2_SOS() #ppERK-EGF-pEGFR-2-Grb2-SOS
	Species PI3K PI3K() #PI3K
	Species EGF_pEGFR_2_PI3K EGF_pEGFR_2_PI3K() #EGF-pEGFR-2-PI3K
	Species EGF_pEGFF_2 EGF_pEGFF_2() #EGF-pEGFF-2
	Species pPI3K pPI3K() #pPI3K
	Species TP4 TP4() #TP4
	Species pPI3K_TP4 pPI3K_TP4() #pPI3K-TP4
	Species PIP2 PIP2() #PIP2
	Species pPI3K_PIP2 pPI3K_PIP2() #pPI3K-PIP2
	Species PIP3 PIP3() #PIP3
	Species Akt Akt() #Akt
	Species Akt_PIP3 Akt_PIP3() #Akt-PIP3
	Species PDK1 PDK1() #PDK1
	Species Akt_PIP3_PDK1 Akt_PIP3_PDK1() #Akt-PIP3-PDK1
	Species pAkt_PIP3 pAkt_PIP3() #pAkt-PIP3
	Species pAkt pAkt() #pAkt
	Species Takt Takt() #Takt
	Species pAkt_PIP3_Takt pAkt_PIP3_Takt() #pAkt-PIP3-Takt
	Species pRaf_pAkt_PIP3 pRaf_pAkt_PIP3() #pRaf-pAkt-PIP3
	Species ppRaf ppRaf() #ppRaf
	Species pROK pROK() #pROK
	Species PTEN PTEN() #PTEN
	Species pROK_PTEN pROK_PTEN() #pROK-PTEN
	Species pPTEN pPTEN() #pPTEN
	Species pPTEN_PIP3 pPTEN_PIP3() #pPTEN-PIP3
	Species RacGEF RacGEF() #RacGEF
	Species PIP3_RacGEF PIP3_RacGEF() #PIP3-RacGEF
	Species RacGDP RacGDP() #RacGDP
	Species PIP3_RacGEF_RacGDP PIP3_RacGEF_RacGDP() #PIP3-RacGEF-RacGDP
	Species RacGTP RacGTP() #RacGTP
	Species RhoGDI RhoGDI() #RhoGDI
	Species RhoGDI_RacGDP RhoGDI_RacGDP() #RhoGDI-RacGDP
	Species RacGAP RacGAP() #RacGAP
	Species RacGTP_RacGAP RacGTP_RacGAP() #RacGTP-RacGAP
	Species RhoGDP RhoGDP() #RhoGDP
	Species RhoGDP_RhoGDI RhoGDP_RhoGDI() #RhoGDP-RhoGDI
	Species pRhoGEF pRhoGEF() #pRhoGEF
	Species RhoGDP_pRhoGEF RhoGDP_pRhoGEF() #RhoGDP-pRhoGEF
	Species RhoGTP RhoGTP() #RhoGTP
	Species EGF_pEGFR_2_RasGAP EGF_pEGFR_2_RasGAP() #EGF-pEGFR-2-RasGAP
	Species EGF_pEGFR_2_RasGAP_RasGTP EGF_pEGFR_2_RasGAP_RasGTP() #EGF-pEGFR-2-RasGAP-RasGTP
	Species EGF_pEGFR2_RasGAP EGF_pEGFR2_RasGAP() #EGF-pEGFR2-RasGAP
	Species SHP2 SHP2() #SHP2
	Species EGF_pEGFR_2_pShc_Grb2_SHP2 EGF_pEGFR_2_pShc_Grb2_SHP2() #EGF-pEGFR-2-pShc-Grb2-SHP2
	Species EGF_pEGFR_2_Grb2_SHP2 EGF_pEGFR_2_Grb2_SHP2() #EGF-pEGFR-2-Grb2-SHP2
	Species EGF_pEGFR_2_pShc_Grb2_SHP2_pRhoGEF EGF_pEGFR_2_pShc_Grb2_SHP2_pRhoGEF() #EGF-pEGFR-2-pShc-Grb2-SHP2-pRhoGEF
	Species RhoGEF RhoGEF() #RhoGEF
	Species pRhoGAP pRhoGAP() #pRhoGAP
	Species EGF_pEGFR_2_pShc_Grb2_SHP2_pRhoGAP EGF_pEGFR_2_pShc_Grb2_SHP2_pRhoGAP() #EGF-pEGFR-2-pShc-Grb2-SHP2-pRhoGAP
	Species RhoGAP RhoGAP() #RhoGAP
	Species EGF_pEGFR_2_Grb2_SHP2_pRhoGEF EGF_pEGFR_2_Grb2_SHP2_pRhoGEF() #EGF-pEGFR-2-Grb2-SHP2-pRhoGEF
	Species EGF_pEGFR_2_Grb2_SHP2_pRhoGAP EGF_pEGFR_2_Grb2_SHP2_pRhoGAP() #EGF-pEGFR-2-Grb2-SHP2-pRhoGAP
	Species EGF_pEGFR_2_RasGAP_SHP2 EGF_pEGFR_2_RasGAP_SHP2() #EGF-pEGFR-2-RasGAP-SHP2
	Species pSrc pSrc() #pSrc
	Species pSrc_RhoGEF pSrc_RhoGEF() #pSrc-RhoGEF
	Species pSrc_RhoGAP pSrc_RhoGAP() #pSrc-RhoGAP
	Species pRhoGAP_RhoGTP pRhoGAP_RhoGTP() #pRhoGAP-RhoGTP
	Species ROK ROK() #ROK
	Species RhoGTP_ROK RhoGTP_ROK() #RhoGTP-ROK
	Species Src Src() #Src
	Species EGF_pEGFR_2_Src EGF_pEGFR_2_Src() #EGF-pEGFR-2-Src
	Species EGF_pEGFR_2_pSrc EGF_pEGFR_2_pSrc() #EGF-pEGFR-2-pSrc
	Species EGF_pEGRF_2 EGF_pEGRF_2() #EGF-pEGRF-2
	Species TP7 TP7() #TP7
	Species pSrc_TP7 pSrc_TP7() #pSrc-TP7
	Species Src_TP7 Src_TP7() #Src-TP7
	Species Cbl_CIN85 Cbl_CIN85() #Cbl-CIN85
	Species EGF_pEGFR_2_pShc_Grb2_SOS_Cbl_CIN85 EGF_pEGFR_2_pShc_Grb2_SOS_Cbl_CIN85() #EGF-pEGFR-2-pShc-Grb2-SOS-Cbl-CIN85
	Species EGF_pEGFR_2_Grb2_SOS_Cbl_CIN85 EGF_pEGFR_2_Grb2_SOS_Cbl_CIN85() #EGF-pEGFR-2-Grb2-SOS-Cbl-CIN85
	Species EPn EPn() #EPn
	Species EGF_pEGFR_2_pShc_Grb2_SOS_Cbl_CIN85_EPn EGF_pEGFR_2_pShc_Grb2_SOS_Cbl_CIN85_EPn() #EGF-pEGFR-2-pShc-Grb2-SOS-Cbl-CIN85-EPn
	Species EGF_pEGFR_2_Grb2_SOS_Cbl_CIN85_EPn EGF_pEGFR_2_Grb2_SOS_Cbl_CIN85_EPn() #EGF-pEGFR-2-Grb2-SOS-Cbl-CIN85-EPn
	Species EGF_pEGFR_2_degrade EGF_pEGFR_2_degrade() #EGF-pEGFR-2-degrade
	Species pShc_Grb2_SOS pShc_Grb2_SOS() #pShc-Grb2-SOS
	Species Pro_EGFR Pro_EGFR() #Pro-EGFR
	Species pROK_EPn pROK_EPn() #pROK-EPn
	Species pEPn pEPn() #pEPn
	Species MPase MPase() #MPase
	Species pEPn_MPase pEPn_MPase() #pEPn-MPase
	Species pEPn_Mpase pEPn_Mpase() #pEPn-Mpase
	Species Ras_GTP_RhoGEF Ras_GTP_RhoGEF() #Ras-GTP-RhoGEF
	Species ppERK_pROK ppERK_pROK() #ppERK-pROK
	Species MEKK1abcdef MEKK1abcdef() #MEKK1abcdef
	Species Grb2_MEKK1abcdef Grb2_MEKK1abcdef() #Grb2-MEKK1abcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abcdef EGF_pEGFR_2_pShc_Grb2_MEKK1abcdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1abcdef
	Species EGF_pEGFR_2_Grb2_MEKK1abcdef EGF_pEGFR_2_Grb2_MEKK1abcdef() #EGF-pEGFR-2-Grb2-MEKK1abcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdef EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1abMEKcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abpMEKcdef EGF_pEGFR_2_pShc_Grb2_MEKK1abpMEKcdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1abpMEKcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdef EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1abppMEKcdef
	Species EGF_pEGFR_2_Grb2_MEKK1abMEKcdef EGF_pEGFR_2_Grb2_MEKK1abMEKcdef() #EGF-pEGFR-2-Grb2-MEKK1abMEKcdef
	Species EGF_pEGFR_2_Grb2_MEKK1abpMEKcdef EGF_pEGFR_2_Grb2_MEKK1abpMEKcdef() #EGF-pEGFR-2-Grb2-MEKK1abpMEKcdef
	Species EGF_pEGFR_2_Grb2_MEKK1abppMEKcdef EGF_pEGFR_2_Grb2_MEKK1abppMEKcdef() #EGF-pEGFR-2-Grb2-MEKK1abppMEKcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdef EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbMEKcdef EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbMEKcdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbMEKcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbpMEKcdef EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbpMEKcdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbpMEKcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcdef EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbppMEKcdef
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbcdef EGF_pEGFR_2_Grb2_MEKK1aRafbcdef() #EGF-pEGFR-2-Grb2-MEKK1aRafbcdef
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbMEKcdef EGF_pEGFR_2_Grb2_MEKK1aRafbMEKcdef() #EGF-pEGFR-2-Grb2-MEKK1aRafbMEKcdef
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbpMEKcdef EGF_pEGFR_2_Grb2_MEKK1aRafbpMEKcdef() #EGF-pEGFR-2-Grb2-MEKK1aRafbpMEKcdef
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcdef EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcdef() #EGF-pEGFR-2-Grb2-MEKK1aRafbppMEKcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abcdefRasGTP EGF_pEGFR_2_pShc_Grb2_MEKK1abcdefRasGTP() #EGF-pEGFR-2-pShc-Grb2-MEKK1abcdefRasGTP
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdefRasGTP EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdefRasGTP() #EGF-pEGFR-2-pShc-Grb2-MEKK1abMEKcdefRasGTP
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abpMEKcdefRasGTP EGF_pEGFR_2_pShc_Grb2_MEKK1abpMEKcdefRasGTP() #EGF-pEGFR-2-pShc-Grb2-MEKK1abpMEKcdefRasGTP
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdefRasGTP EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdefRasGTP() #EGF-pEGFR-2-pShc-Grb2-MEKK1abppMEKcdefRasGTP
	Species EGF_pEGFR_2_Grb2_MEKK1abcdefRasGTP EGF_pEGFR_2_Grb2_MEKK1abcdefRasGTP() #EGF-pEGFR-2-Grb2-MEKK1abcdefRasGTP
	Species EGF_pEGFR_2_Grb2_MEKK1abMEKcdefRasGTP EGF_pEGFR_2_Grb2_MEKK1abMEKcdefRasGTP() #EGF-pEGFR-2-Grb2-MEKK1abMEKcdefRasGTP
	Species EGF_pEGFR_2_Grb2_MEKK1abpMEKcdefRasGTP EGF_pEGFR_2_Grb2_MEKK1abpMEKcdefRasGTP() #EGF-pEGFR-2-Grb2-MEKK1abpMEKcdefRasGTP
	Species EGF_pEGFR_2_Grb2_MEKK1abppMEKcdefRasGTP EGF_pEGFR_2_Grb2_MEKK1abppMEKcdefRasGTP() #EGF-pEGFR-2-Grb2-MEKK1abppMEKcdefRasGTP
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcERKdefRasGTP EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcERKdefRasGTP() #EGF-pEGFR-2-pShc-Grb2-MEKK1abppMEKcERKdefRasGTP
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcpERKdefRasGTP EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcpERKdefRasGTP() #EGF-pEGFR-2-pShc-Grb2-MEKK1abppMEKcpERKdefRasGTP
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcppERKdefRasGTP EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcppERKdefRasGTP() #EGF-pEGFR-2-pShc-Grb2-MEKK1abppMEKcppERKdefRasGTP
	Species EGF_pEGFR_2_Grb2_MEKK1abppMEKcERKdefRasGTP EGF_pEGFR_2_Grb2_MEKK1abppMEKcERKdefRasGTP() #EGF-pEGFR-2-Grb2-MEKK1abppMEKcERKdefRasGTP
	Species EGF_pEGFR_2_Grb2_MEKK1abppMEKcpERKdefRasGTP EGF_pEGFR_2_Grb2_MEKK1abppMEKcpERKdefRasGTP() #EGF-pEGFR-2-Grb2-MEKK1abppMEKcpERKdefRasGTP
	Species EGF_pEGFR_2_Grb2_MEKK1abppMEKcppERKdefRasGTP EGF_pEGFR_2_Grb2_MEKK1abppMEKcppERKdefRasGTP() #EGF-pEGFR-2-Grb2-MEKK1abppMEKcppERKdefRasGTP
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbcdef EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbcdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1apRafbcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbMEKcdef EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbMEKcdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1apRafbMEKcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbpMEKcdef EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbpMEKcdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1apRafbpMEKcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbppMEKcdef EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbppMEKcdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1apRafbppMEKcdef
	Species EGF_pEGFR_2_Grb2_MEKK1apRafbcdef EGF_pEGFR_2_Grb2_MEKK1apRafbcdef() #EGF-pEGFR-2-Grb2-MEKK1apRafbcdef
	Species EGF_pEGFR_2_Grb2_MEKK1apRafbMEKcdef EGF_pEGFR_2_Grb2_MEKK1apRafbMEKcdef() #EGF-pEGFR-2-Grb2-MEKK1apRafbMEKcdef
	Species EGF_pEGFR_2_Grb2_MEKK1apRafbpMEKcdef EGF_pEGFR_2_Grb2_MEKK1apRafbpMEKcdef() #EGF-pEGFR-2-Grb2-MEKK1apRafbpMEKcdef
	Species EGF_pEGFR_2_Grb2_MEKK1apRafbppMEKcdef EGF_pEGFR_2_Grb2_MEKK1apRafbppMEKcdef() #EGF-pEGFR-2-Grb2-MEKK1apRafbppMEKcdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdRhoGTPef EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdRhoGTPef() #EGF-pEGFR-2-pShc-Grb2-MEKK1abMEKcdRhoGTPef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdRhoGTPef EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdRhoGTPef() #EGF-pEGFR-2-pShc-Grb2-MEKK1abppMEKcdRhoGTPef
	Species EGF_pEGFR_2_Grb2_MEKK1abMEKcdRhoGTPef EGF_pEGFR_2_Grb2_MEKK1abMEKcdRhoGTPef() #EGF-pEGFR-2-Grb2-MEKK1abMEKcdRhoGTPef
	Species EGF_pEGFR_2_Grb2_MEKK1abppMEKcdRhoGTPef EGF_pEGFR_2_Grb2_MEKK1abppMEKcdRhoGTPef() #EGF-pEGFR-2-Grb2-MEKK1abppMEKcdRhoGTPef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbMEKcdRhoGTPef EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbMEKcdRhoGTPef() #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbMEKcdRhoGTPef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPef EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPef() #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbcdRhoGTPef
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbMEKcdRhoGTPef EGF_pEGFR_2_Grb2_MEKK1aRafbMEKcdRhoGTPef() #EGF-pEGFR-2-Grb2-MEKK1aRafbMEKcdRhoGTPef
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPef EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPef() #EGF-pEGFR-2-Grb2-MEKK1aRafbcdRhoGTPef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcERKdef EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcERKdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1abppMEKcERKdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcpERKdef EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcpERKdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1abppMEKcpERKdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcppERKdef EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcppERKdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1abppMEKcppERKdef
	Species EGF_pEGFR_2_Grb2_MEKK1abppMEKcERKdef EGF_pEGFR_2_Grb2_MEKK1abppMEKcERKdef() #EGF-pEGFR-2-Grb2-MEKK1abppMEKcERKdef
	Species EGF_pEGFR_2_Grb2_MEKK1abppMEKcpERKdef EGF_pEGFR_2_Grb2_MEKK1abppMEKcpERKdef() #EGF-pEGFR-2-Grb2-MEKK1abppMEKcpERKdef
	Species EGF_pEGFR_2_Grb2_MEKK1abppMEKcppERKdef EGF_pEGFR_2_Grb2_MEKK1abppMEKcppERKdef() #EGF-pEGFR-2-Grb2-MEKK1abppMEKcppERKdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcERKdef EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcERKdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbppMEKcERKdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcpERKdef EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcpERKdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbppMEKcpERKdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcppERKdef EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcppERKdef() #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbppMEKcppERKdef
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcERKdef EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcERKdef() #EGF-pEGFR-2-Grb2-MEKK1aRafbppMEKcERKdef
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcpERKdef EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcpERKdef() #EGF-pEGFR-2-Grb2-MEKK1aRafbppMEKcpERKdef
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcppERKdef EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcppERKdef() #EGF-pEGFR-2-Grb2-MEKK1aRafbppMEKcppERKdef
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcdRhoGTPepRhoGAPf EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcdRhoGTPepRhoGAPf() #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbppMEKcdRhoGTPepRhoGAPf
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcdRhoGTPepRhoGAPf EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcdRhoGTPepRhoGAPf() #EGF-pEGFR-2-Grb2-MEKK1aRafbppMEKcdRhoGTPepRhoGAPf
	Species EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPepRhoGAPf EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPepRhoGAPf() #EGF-pEGFR-2-pShc-Grb2-MEKK1aRafbcdRhoGTPepRhoGAPf
	Species EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPepRhoGAPf EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPepRhoGAPf() #EGF-pEGFR-2-Grb2-MEKK1aRafbcdRhoGTPepRhoGAPf
end observables
begin reaction rules
	reaction_0: EGF() + EGFR() <-> EGF_EGFR() r1_k1,r1_k2
	reaction_1: EGF_EGFR() + EGF_EGFR() <-> EGF_EGFR_2() r2_k1,r2_k2
	reaction_2: EGF_EGFR_2() -> EGF_pEGFR_2() r3_k1
	reaction_3: EGF_pEGFR_2() + SHP() <-> EGF_pEGFR_2_SHP() r4_k1,r4_k2
	reaction_4: EGF_pEGFR_2_SHP() -> EGF_EGFR_2() + SHP() r5_k1
	reaction_5: EGF_pEGFR_2() + Shc() <-> EGF_pEGFR_2_Shc() r6_k1,r6_k2
	reaction_6: EGF_pEGFR_2_Shc() -> EGF_pEGFR_2_pShc() r7_k1
	reaction_7: EGF_pEGFR_2_pShc() <-> EGF_pEGFR_2() + pShc() r8_k1,r8_k2
	reaction_8: pShc() + SHP() <-> pShc_SHP() r9_k1,r9_k2
	reaction_9: pShc_SHP() -> Shc() + SHP() r10_k1
	reaction_10: EGF_pEGFR_2_pShc() + Grb2() <-> EGF_pEGFR_2_pShc_Grb2() r11_k1,r11_k2
	reaction_11: EGF_pEGFR_2_pShc_Grb2() + SOS() <-> EGF_pEGFR_2_pShc_Grb2_SOS() r12_k1,r12_k2
	reaction_12: Grb2() + SOS() <-> Grb2_SOS() r13_k1,r13_k2
	reaction_13: EGF_pEGFR_2_pShc() + Grb2_SOS() <-> EGF_pEGFR_2_pShc_Grb2_SOS() r14_k1,r14_k2
	reaction_14: EGF_pEGFR_2_pShc_Grb2_SOS() + RasGDP() <-> EGF_pEGFR_2_pShc_Grb2_SOS_RasGDP() r15_k1,r15_k2
	reaction_15: EGF_pEGFR_2_pShc_Grb2_SOS_RasGDP() -> EGF_pEGFR_2_pShc_Grb2_SOS() + RasGTP() r16_k1
	reaction_16: EGF_pEGFR_2() + Grb2() <-> EGF_pEGFR_2_Grb2() r17_k1,r17_k2
	reaction_17: EGF_pEGFR_2_Grb2() + SOS() <-> EGF_pEGFR_2_Grb2_SOS() r18_k1,r18_k2
	reaction_18: EGF_pEGFR_2() + Grb2_SOS() <-> EGF_pEGFR_2_Grb2_SOS() r19_k1,r19_k2
	reaction_19: EGF_pEGFR_2_Grb2_SOS() + RasGDP() <-> EGF_pEGFR_2_Grb2_SOS_RasGDP() r20_k1,r20_k2
	reaction_20: EGF_pEGFR_2_Grb2_SOS_RasGDP() -> EGF_pEGFR_2_Grb2_SOS() + RasGTP() r21_k1
	reaction_21: Raf() + RasGTP() <-> Raf_RasGTP() r22_k1,r22_k2
	reaction_22: Raf_RasGTP() -> pRaf() + RasGTP() r23_k1
	reaction_23: pRaf() + MEK() <-> pRaf_MEK() r24_k1,r24_k2
	reaction_24: pRaf_MEK() -> pRaf() + pMEK() r25_k1
	reaction_25: pRaf() + pMEK() <-> pRaf_pMEK() r26_k1,r26_k2
	reaction_26: pRaf_pMEK() -> pRaf() + ppMEK() r27_k1
	reaction_27: ppMEK() + ERK() <-> ppMEK_ERK() r28_k1,r28_k2
	reaction_28: ppMEK_ERK() -> ppMEK() + pERK() r29_k1
	reaction_29: ppMEK() + pERK() <-> ppMEK_pERK() r30_k1,r30_k2
	reaction_30: ppMEK_pERK() -> ppMEK() + ppERK() r31_k1
	reaction_31: pRaf() + Pase() <-> pRaf_Pase() r32_k1,r32_k2
	reaction_32: pRaf_Pase() -> Raf() + Pase() r33_k1
	reaction_33: ppMEK() + PP2A() <-> ppMEK_PP2A() r34_k1,r34_k2
	reaction_34: ppMEK_PP2A() -> pMEK() + PP2A() r35_k1
	reaction_35: pMEK() + PP2A() <-> pMEK_PP2A() r36_k1,r36_k2
	reaction_36: pMEK_PP2A() -> MEK() + PP2A() r37_k1
	reaction_37: ppERK() + MKP3() <-> ppERK_MKP3() r38_k1,r38_k2
	reaction_38: ppERK_MKP3() -> pERK() + MKP3() r39_k1
	reaction_39: pERK() + MKP3() <-> pERK_MKP3() r40_k1,r40_k2
	reaction_40: pERK_MKP3() -> ERK() + MKP3() r41_k1
	reaction_41: RasGTP() -> RasGDP() r42_k1
	reaction_42: RasGTP() + RasGAP() <-> RasGTP_RasGAP() r43_k1,r43_k2
	reaction_43: RasGTP_RasGAP() -> RasGDP() + RasGAP() r44_k1
	reaction_44: ppERK() + EGF_pEGFR_2_pShc_Grb2_SOS() <-> ppERK_EGF_pEGFR_2_pShc_Grb2_SOS() r45_k1,r45_k2
	reaction_45: ppERK_EGF_pEGFR_2_pShc_Grb2_SOS() -> ppERK() + EGF_pEGFR_2() + pShc() + Grb2() + pSOS() r46_k1
	reaction_46: ppERK() + EGF_pEGFR_2_Grb2_SOS() <-> ppERK_EGF_pEGFR_2_Grb2_SOS() r47_k1,r47_k2
	reaction_47: ppERK_EGF_pEGFR_2_Grb2_SOS() -> ppERK() + EGF_pEGFR_2() + Grb2() + pSOS() r48_k1
	reaction_48: pSOS() -> SOS() r49_k1
	reaction_49: EGF_pEGFR_2() + PI3K() <-> EGF_pEGFR_2_PI3K() r50_k1,r50_k2
	reaction_50: EGF_pEGFR_2_PI3K() -> EGF_pEGFF_2() + pPI3K() r51_k1
	reaction_51: pPI3K() + TP4() <-> pPI3K_TP4() r52_k1,r52_k2
	reaction_52: pPI3K_TP4() -> PI3K() + TP4() r53_k1
	reaction_53: pPI3K() + PIP2() <-> pPI3K_PIP2() r54_k1,r54_k2
	reaction_54: pPI3K_PIP2() -> pPI3K() + PIP3() r55_k1
	reaction_55: Akt() + PIP3() <-> Akt_PIP3() r56_k1,r56_k2
	reaction_56: Akt_PIP3() + PDK1() <-> Akt_PIP3_PDK1() r57_k1,r57_k2
	reaction_57: Akt_PIP3_PDK1() -> pAkt_PIP3() + PDK1() r58_k1
	reaction_58: pAkt_PIP3() <-> pAkt() + PIP3() r59_k1,r59_k2
	reaction_59: pAkt_PIP3() + Takt() <-> pAkt_PIP3_Takt() r60_k1,r60_k2
	reaction_60: pAkt_PIP3_Takt() -> Akt_PIP3() + Takt() r61_k1
	reaction_61: pRaf() + pAkt_PIP3() <-> pRaf_pAkt_PIP3() r62_k1,r62_k2
	reaction_62: pRaf_pAkt_PIP3() -> ppRaf() + pAkt_PIP3() r63_k1
	reaction_63: ppRaf() -> pRaf() r64_k1
	reaction_64: pROK() + PTEN() <-> pROK_PTEN() r65_k1,r65_k2
	reaction_65: pROK_PTEN() -> pROK() + pPTEN() r66_k1
	reaction_66: pPTEN() + PIP3() <-> pPTEN_PIP3() r67_k1,r67_k2
	reaction_67: pPTEN_PIP3() -> pPTEN() + PIP2() r68_k1
	reaction_68: pPTEN() -> PTEN() r69_k1
	reaction_69: PIP3() -> PIP2() r70_k1
	reaction_70: PIP3() + RacGEF() <-> PIP3_RacGEF() r71_k1,r71_k2
	reaction_71: PIP3_RacGEF() + RacGDP() <-> PIP3_RacGEF_RacGDP() r72_k1,r72_k2
	reaction_72: PIP3_RacGEF_RacGDP() -> PIP3_RacGEF() + RacGTP() r73_k1
	reaction_73: RhoGDI() + RacGDP() <-> RhoGDI_RacGDP() r74_k1,r74_k2
	reaction_74: RacGTP() -> RacGDP() r75_k1
	reaction_75: RacGTP() + RacGAP() <-> RacGTP_RacGAP() r76_k1,r76_k2
	reaction_76: RacGTP_RacGAP() -> RacGDP() + RacGAP() r77_k1
	reaction_77: RhoGDP() + RhoGDI() <-> RhoGDP_RhoGDI() r78_k1,r78_k2
	reaction_78: RhoGDP() + pRhoGEF() <-> RhoGDP_pRhoGEF() r79_k1,r79_k2
	reaction_79: RhoGDP_pRhoGEF() -> RhoGTP() + pRhoGEF() r80_k1
	reaction_80: RhoGTP() -> RhoGDP() r81_k1
	reaction_81: EGF_pEGFR_2() + RasGAP() <-> EGF_pEGFR_2_RasGAP() r82_k1,r82_k2
	reaction_82: EGF_pEGFR_2_RasGAP() + RasGTP() <-> EGF_pEGFR_2_RasGAP_RasGTP() r83_k1,r83_k2
	reaction_83: EGF_pEGFR_2_RasGAP_RasGTP() -> EGF_pEGFR2_RasGAP() + RasGDP() r84_k1
	reaction_84: EGF_pEGFR_2_pShc_Grb2() + SHP2() <-> EGF_pEGFR_2_pShc_Grb2_SHP2() r85_k1,r85_k2
	reaction_85: EGF_pEGFR_2_Grb2() + SHP2() <-> EGF_pEGFR_2_Grb2_SHP2() r86_k1,r86_k2
	reaction_86: EGF_pEGFR_2_pShc_Grb2_SHP2() -> EGF_EGFR_2() + pShc() + Grb2() + SHP2() r87_k1
	reaction_87: EGF_pEGFR_2_Grb2_SHP2() -> EGF_EGFR_2() + Grb2() + SHP2() r88_k1
	reaction_88: EGF_pEGFR_2_pShc_Grb2_SHP2() + pRhoGEF() <-> EGF_pEGFR_2_pShc_Grb2_SHP2_pRhoGEF() r89_k1,r89_k2
	reaction_89: EGF_pEGFR_2_pShc_Grb2_SHP2_pRhoGEF() -> EGF_pEGFR_2_pShc_Grb2_SHP2() + RhoGEF() r90_k1
	reaction_90: EGF_pEGFR_2_pShc_Grb2_SHP2() + pRhoGAP() <-> EGF_pEGFR_2_pShc_Grb2_SHP2_pRhoGAP() r91_k1,r91_k2
	reaction_91: EGF_pEGFR_2_pShc_Grb2_SHP2_pRhoGAP() -> EGF_pEGFR_2_pShc_Grb2_SHP2() + RhoGAP() r92_k1
	reaction_92: EGF_pEGFR_2_Grb2_SHP2() + pRhoGEF() <-> EGF_pEGFR_2_Grb2_SHP2_pRhoGEF() r93_k1,r93_k2
	reaction_93: EGF_pEGFR_2_Grb2_SHP2_pRhoGEF() -> EGF_pEGFR_2_Grb2_SHP2() + RhoGEF() r94_k1
	reaction_94: EGF_pEGFR_2_Grb2_SHP2() + pRhoGAP() <-> EGF_pEGFR_2_Grb2_SHP2_pRhoGAP() r95_k1,r95_k2
	reaction_95: EGF_pEGFR_2_Grb2_SHP2_pRhoGAP() -> EGF_pEGFR_2_Grb2_SHP2() + RhoGAP() r96_k1
	reaction_96: EGF_pEGFR_2_RasGAP() + SHP2() <-> EGF_pEGFR_2_RasGAP_SHP2() r97_k1,r97_k2
	reaction_97: EGF_pEGFR_2_RasGAP_SHP2() -> EGF_EGFR_2() + RasGAP() + SHP2() r98_k1
	reaction_98: pSrc() + RhoGEF() <-> pSrc_RhoGEF() r99_k1,r99_k2
	reaction_99: pSrc_RhoGEF() -> pSrc() + pRhoGEF() r100_k1
	reaction_100: pRhoGEF() -> RhoGEF() r101_k1
	reaction_101: pSrc() + RhoGAP() <-> pSrc_RhoGAP() r102_k1,r102_k2
	reaction_102: pSrc_RhoGAP() -> pSrc() + pRhoGAP() r103_k1
	reaction_103: pRhoGAP() + RhoGTP() <-> pRhoGAP_RhoGTP() r104_k1,r104_k2
	reaction_104: pRhoGAP_RhoGTP() -> pRhoGAP() + RhoGDP() r105_k1
	reaction_105: RhoGTP() + ROK() <-> RhoGTP_ROK() r106_k1,r106_k2
	reaction_106: RhoGTP_ROK() -> RhoGTP() + pROK() r107_k1
	reaction_107: EGF_pEGFR_2() + Src() <-> EGF_pEGFR_2_Src() r108_k1,r108_k2
	reaction_108: EGF_pEGFR_2_Src() -> EGF_pEGFR_2_pSrc() r109_k1
	reaction_109: EGF_pEGFR_2() <-> EGF_pEGRF_2() + pSrc() r110_k1,r110_k2
	reaction_110: pSrc() + TP7() <-> pSrc_TP7() r111_k1,r111_k2
	reaction_111: pSrc_TP7() -> Src_TP7() r112_k1
	reaction_112: Src_TP7() <-> Src() + TP7() r113_k1,r113_k2
	reaction_113: EGF_pEGFR_2_pShc_Grb2_SOS() + Cbl_CIN85() <-> EGF_pEGFR_2_pShc_Grb2_SOS_Cbl_CIN85() r114_k1,r114_k2
	reaction_114: EGF_pEGFR_2_Grb2_SOS() + Cbl_CIN85() <-> EGF_pEGFR_2_Grb2_SOS_Cbl_CIN85() r115_k1,r115_k2
	reaction_115: EGF_pEGFR_2_pShc_Grb2_SOS_Cbl_CIN85() + EPn() <-> EGF_pEGFR_2_pShc_Grb2_SOS_Cbl_CIN85_EPn() r116_k1,r116_k2
	reaction_116: EGF_pEGFR_2_Grb2_SOS_Cbl_CIN85() + EPn() <-> EGF_pEGFR_2_Grb2_SOS_Cbl_CIN85_EPn() r117_k1,r117_k2
	reaction_117: EGF_pEGFR_2_pShc_Grb2_SOS_Cbl_CIN85_EPn() -> EGF_pEGFR_2_degrade() + Cbl_CIN85() + EPn() + pShc_Grb2_SOS() r118_k1
	reaction_118: EGF_pEGFR_2_Grb2_SOS_Cbl_CIN85_EPn() -> EGF_pEGFR_2_degrade() + Cbl_CIN85() + EPn() + Grb2_SOS() r119_k1
	reaction_119: Pro_EGFR() -> EGFR() r120_k1
	reaction_120: pROK() + EPn() <-> pROK_EPn() r121_k1,r121_k2
	reaction_121: pROK_EPn() -> pROK() + pEPn() r122_k1
	reaction_122: pEPn() + MPase() <-> pEPn_MPase() r123_k1,r123_k2
	reaction_123: pEPn_Mpase() -> EPn() + MPase() r124_k1
	reaction_124: RasGTP() + RhoGEF() <-> Ras_GTP_RhoGEF() r125_k1,r125_k2
	reaction_125: Ras_GTP_RhoGEF() -> RasGTP() + pRhoGEF() r126_k1
	reaction_126: ppERK() + pROK() <-> ppERK_pROK() r127_k1,r127_k2
	reaction_127: ppERK_pROK() -> ppERK() + ROK() r128_k1
	reaction_128: Grb2() + MEKK1abcdef() <-> Grb2_MEKK1abcdef() r129_k1,r129_k2
	reaction_129: EGF_pEGFR_2_pShc() + Grb2_MEKK1abcdef() <-> EGF_pEGFR_2_pShc_Grb2_MEKK1abcdef() r130_k1,r130_k2
	reaction_130: EGF_pEGFR_2() + Grb2_MEKK1abcdef() <-> EGF_pEGFR_2_Grb2_MEKK1abcdef() r131_k1,r131_k2
	reaction_131: EGF_pEGFR_2_pShc_Grb2_MEKK1abcdef() + MEK() <-> EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdef() r132_k1,r132_k2
	reaction_132: EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdef() -> EGF_pEGFR_2_pShc_Grb2_MEKK1abpMEKcdef() r133_k1
	reaction_133: EGF_pEGFR_2_pShc_Grb2_MEKK1abpMEKcdef() -> EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdef() r134_k1
	reaction_134: EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdef() <-> EGF_pEGFR_2_pShc_Grb2_MEKK1abcdef() + ppMEK() r135_k1,r135_k2
	reaction_135: EGF_pEGFR_2_Grb2_MEKK1abcdef() + MEK() <-> EGF_pEGFR_2_Grb2_MEKK1abMEKcdef() r136_k1,r136_k2
	reaction_136: EGF_pEGFR_2_Grb2_MEKK1abMEKcdef() -> EGF_pEGFR_2_Grb2_MEKK1abpMEKcdef() r137_k1
	reaction_137: EGF_pEGFR_2_Grb2_MEKK1abpMEKcdef() -> EGF_pEGFR_2_Grb2_MEKK1abppMEKcdef() r138_k1
	reaction_138: EGF_pEGFR_2_Grb2_MEKK1abppMEKcdef() <-> EGF_pEGFR_2_Grb2_MEKK1abcdef() + ppMEK() r139_k1,r139_k2
	reaction_139: EGF_pEGFR_2_pShc_Grb2_MEKK1abcdef() + Raf() <-> EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdef() r140_k1,r140_k2
	reaction_140: EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdef() + MEK() <-> EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbMEKcdef() r141_k1,r141_k2
	reaction_141: EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbMEKcdef() -> EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbpMEKcdef() r142_k1
	reaction_142: EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbpMEKcdef() -> EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcdef() r143_k1
	reaction_143: EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcdef() <-> EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdef() + ppMEK() r144_k1,r144_k2
	reaction_144: EGF_pEGFR_2_Grb2_MEKK1abcdef() + Raf() <-> EGF_pEGFR_2_Grb2_MEKK1aRafbcdef() r145_k1,r145_k2
	reaction_145: EGF_pEGFR_2_Grb2_MEKK1aRafbcdef() + MEK() <-> EGF_pEGFR_2_Grb2_MEKK1aRafbMEKcdef() r146_k1,r146_k2
	reaction_146: EGF_pEGFR_2_Grb2_MEKK1aRafbMEKcdef() -> EGF_pEGFR_2_Grb2_MEKK1aRafbpMEKcdef() r147_k1
	reaction_147: EGF_pEGFR_2_Grb2_MEKK1aRafbpMEKcdef() -> EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcdef() r148_k1
	reaction_148: EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcdef() <-> EGF_pEGFR_2_Grb2_MEKK1aRafbcdef() + ppMEK() r149_k1,r149_k2
	reaction_149: EGF_pEGFR_2_pShc_Grb2_MEKK1abcdef() + RasGTP() <-> EGF_pEGFR_2_pShc_Grb2_MEKK1abcdefRasGTP() r150_k1,r150_k2
	reaction_150: EGF_pEGFR_2_pShc_Grb2_MEKK1abcdefRasGTP() + MEK() <-> EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdefRasGTP() r151_k1,r151_k2
	reaction_151: EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdefRasGTP() -> EGF_pEGFR_2_pShc_Grb2_MEKK1abpMEKcdefRasGTP() r152_k1
	reaction_152: EGF_pEGFR_2_pShc_Grb2_MEKK1abpMEKcdefRasGTP() -> EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdefRasGTP() r153_k1
	reaction_153: EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdefRasGTP() <-> EGF_pEGFR_2_pShc_Grb2_MEKK1abcdefRasGTP() + ppMEK() r154_k1,r154_k2
	reaction_154: EGF_pEGFR_2_Grb2_MEKK1abcdef() + RasGTP() <-> EGF_pEGFR_2_Grb2_MEKK1abcdefRasGTP() r155_k1,r155_k2
	reaction_155: EGF_pEGFR_2_Grb2_MEKK1abcdefRasGTP() + MEK() <-> EGF_pEGFR_2_Grb2_MEKK1abMEKcdefRasGTP() r156_k1,r156_k2
	reaction_156: EGF_pEGFR_2_Grb2_MEKK1abMEKcdefRasGTP() -> EGF_pEGFR_2_Grb2_MEKK1abpMEKcdefRasGTP() r157_k1
	reaction_157: EGF_pEGFR_2_Grb2_MEKK1abpMEKcdefRasGTP() -> EGF_pEGFR_2_Grb2_MEKK1abppMEKcdefRasGTP() r158_k1
	reaction_158: EGF_pEGFR_2_Grb2_MEKK1abppMEKcdefRasGTP() <-> EGF_pEGFR_2_Grb2_MEKK1abcdefRasGTP() + ppMEK() r159_k1,r159_k2
	reaction_159: EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdefRasGTP() + ERK() <-> EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcERKdefRasGTP() r160_k1,r160_k2
	reaction_160: EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcERKdefRasGTP() -> EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcpERKdefRasGTP() r161_k1
	reaction_161: EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcpERKdefRasGTP() -> EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcppERKdefRasGTP() r162_k1
	reaction_162: EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcppERKdefRasGTP() -> EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdefRasGTP() + ppERK() r163_k1
	reaction_163: EGF_pEGFR_2_Grb2_MEKK1abppMEKcdefRasGTP() + ERK() <-> EGF_pEGFR_2_Grb2_MEKK1abppMEKcERKdefRasGTP() r164_k1,r164_k2
	reaction_164: EGF_pEGFR_2_Grb2_MEKK1abppMEKcERKdefRasGTP() -> EGF_pEGFR_2_Grb2_MEKK1abppMEKcpERKdefRasGTP() r165_k1
	reaction_165: EGF_pEGFR_2_Grb2_MEKK1abppMEKcpERKdefRasGTP() -> EGF_pEGFR_2_Grb2_MEKK1abppMEKcppERKdefRasGTP() r166_k1
	reaction_166: EGF_pEGFR_2_Grb2_MEKK1abppMEKcppERKdefRasGTP() -> EGF_pEGFR_2_Grb2_MEKK1abppMEKcdefRasGTP() + ppERK() r167_k1
	reaction_167: EGF_pEGFR_2_pShc_Grb2_MEKK1abcdef() + pRaf() <-> EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbcdef() r168_k1,r168_k2
	reaction_168: EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbcdef() + MEK() <-> EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbMEKcdef() r169_k1,r169_k2
	reaction_169: EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbMEKcdef() -> EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbpMEKcdef() r170_k1
	reaction_170: EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbpMEKcdef() -> EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbppMEKcdef() r171_k1
	reaction_171: EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbppMEKcdef() <-> EGF_pEGFR_2_pShc_Grb2_MEKK1apRafbcdef() + ppMEK() r172_k1,r172_k2
	reaction_172: EGF_pEGFR_2_Grb2_MEKK1abcdef() + pRaf() <-> EGF_pEGFR_2_Grb2_MEKK1apRafbcdef() r173_k1,r173_k2
	reaction_173: EGF_pEGFR_2_Grb2_MEKK1apRafbcdef() + MEK() <-> EGF_pEGFR_2_Grb2_MEKK1apRafbMEKcdef() r174_k1,r174_k2
	reaction_174: EGF_pEGFR_2_Grb2_MEKK1apRafbMEKcdef() -> EGF_pEGFR_2_Grb2_MEKK1apRafbpMEKcdef() r175_k1
	reaction_175: EGF_pEGFR_2_Grb2_MEKK1apRafbpMEKcdef() -> EGF_pEGFR_2_Grb2_MEKK1apRafbppMEKcdef() r176_k1
	reaction_176: EGF_pEGFR_2_Grb2_MEKK1apRafbppMEKcdef() <-> EGF_pEGFR_2_Grb2_MEKK1apRafbcdef() + ppMEK() r177_k1,r177_k2
	reaction_177: EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdef() + RhoGTP() <-> EGF_pEGFR_2_pShc_Grb2_MEKK1abMEKcdRhoGTPef() r178_k1,r178_k2
	reaction_178: EGF_pEGFR_2_Grb2_MEKK1abMEKcdef() + RhoGTP() <-> EGF_pEGFR_2_Grb2_MEKK1abMEKcdRhoGTPef() r179_k1,r179_k2
	reaction_179: EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbMEKcdef() + RhoGTP() <-> EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbMEKcdRhoGTPef() r180_k1,r180_k2
	reaction_180: EGF_pEGFR_2_Grb2_MEKK1aRafbMEKcdef() + RhoGTP() <-> EGF_pEGFR_2_Grb2_MEKK1aRafbMEKcdRhoGTPef() r181_k1,r181_k2
	reaction_181: EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdef() + ERK() <-> EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcERKdef() r182_k1,r182_k2
	reaction_182: EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcERKdef() -> EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcpERKdef() r183_k1
	reaction_183: EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcpERKdef() -> EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcppERKdef() r184_k1
	reaction_184: EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcppERKdef() -> EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdef() + ppERK() r185_k1
	reaction_185: EGF_pEGFR_2_Grb2_MEKK1abppMEKcdef() + ERK() <-> EGF_pEGFR_2_Grb2_MEKK1abppMEKcERKdef() r186_k1,r186_k2
	reaction_186: EGF_pEGFR_2_Grb2_MEKK1abppMEKcERKdef() -> EGF_pEGFR_2_Grb2_MEKK1abppMEKcpERKdef() r187_k1
	reaction_187: EGF_pEGFR_2_Grb2_MEKK1abppMEKcpERKdef() -> EGF_pEGFR_2_Grb2_MEKK1abppMEKcppERKdef() r188_k1
	reaction_188: EGF_pEGFR_2_Grb2_MEKK1abppMEKcppERKdef() -> EGF_pEGFR_2_Grb2_MEKK1abppMEKcdef() + ppERK() r189_k1
	reaction_189: EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcdef() + ERK() <-> EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcERKdef() r190_k1,r190_k2
	reaction_190: EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcERKdef() -> EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcpERKdef() r191_k1
	reaction_191: EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcpERKdef() -> EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcppERKdef() r192_k1
	reaction_192: EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcppERKdef() -> EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcdef() + ppERK() r193_k1
	reaction_193: EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcdef() + ERK() <-> EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcERKdef() r194_k1,r194_k2
	reaction_194: EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcERKdef() -> EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcpERKdef() r195_k1
	reaction_195: EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcpERKdef() -> EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcppERKdef() r196_k1
	reaction_196: EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcppERKdef() -> EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcdef() + ppERK() r197_k1
	reaction_197: EGF_pEGFR_2_pShc_Grb2_MEKK1abppMEKcdRhoGTPef() + pRhoGAP() <-> EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcdRhoGTPepRhoGAPf() r198_k1,r198_k2
	reaction_198: EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcdRhoGTPepRhoGAPf() -> EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbppMEKcdef() + RhoGDP() + pRhoGAP() r199_k1
	reaction_199: EGF_pEGFR_2_Grb2_MEKK1abppMEKcdRhoGTPef() + pRhoGAP() <-> EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcdRhoGTPepRhoGAPf() r200_k1,r200_k2
	reaction_200: EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcdRhoGTPepRhoGAPf() -> EGF_pEGFR_2_Grb2_MEKK1aRafbppMEKcdef() + RhoGDP() + pRhoGAP() r201_k1
	reaction_201: EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPef() + pRhoGAP() <-> EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPepRhoGAPf() r202_k1,r202_k2
	reaction_202: EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdRhoGTPepRhoGAPf() -> EGF_pEGFR_2_pShc_Grb2_MEKK1aRafbcdef() + RhoGDP() + pRhoGAP() r203_k1
	reaction_203: EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPef() + pRhoGAP() <-> EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPepRhoGAPf() r204_k1,r204_k2
	reaction_204: EGF_pEGFR_2_Grb2_MEKK1aRafbcdRhoGTPepRhoGAPf() -> EGF_pEGFR_2_Grb2_MEKK1aRafbcdef() + RhoGDP() + pRhoGAP() r205_k1
end reaction rules
end model
