###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000227', 'http://identifiers.org/biomodels.db/MODEL7743656488']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/18854041']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/biomodels.db/BIOMD0000000139', 'http://identifiers.org/pubmed/15094015', 'http://identifiers.org/biomodels.db/BIOMD0000000140']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/10090']
#@BQB_IS_PART_OF:['http://identifiers.org/kegg.pathway/mmu04660']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0007249']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is a plain translation of an SBML model created on 14/08/2021. The original model has 60 molecules and 57 reactions. The translated model has 56 molecules and 66 rules'
###
begin model
begin parameters
	k2 0.000125
	k3 1e-05
	k4 0.1
	k5 0.0015
	k6 0.000125
	k7 0.24
	k8 0.1
	k9 1.2
	k10 0.1
	k11 0.000125
	k12 2e-05
	kf13 0.5
	kf14 0.5
	kf15 0.0025
	kr15 8e-05
	k16 0.5
	k17 0.0004
	k18 0.0003
	k20 5e-07
	k21 0.0001
	k22 0.5
	kf23 0.001
	kr23 0.0005
	k27 0.0004
	kf28 0.01
	kf32 10.0
	kr32 0.0001
	k42 0.0005
	k43 0.1
	k33 0.0005
	k34 0.1
	k69 0.006
	k70 0.06
	k49 0.0005
	k50 0.02
	k61 0.06
	k62 0.6
	k35 0.01
	k36 0.0041
	k37 5e-05
	k38 6e-05
	k39 0.00013
	k40 6.4e-05
	kf41 10.0
	kr41 0.0001
	k44 0.016
	k45 0.0053
	k46 5e-05
	k47 6.4e-05
	kf48 10.0
	kr48 0.0001
	k51 0.025
	kf52 0.003
	kr52 0.001
	k53 0.0002
	k54 0.0002
	kf55 0.62
	kr55 0.00048
	kf56 0.62
	kr56 0.00048
	kf57 18.4
	kr57 0.055
	kf58 18.4
	kr58 0.055
	kf59 0.0038
	kr59 8e-13
	kf60 0.0038
	kr60 8e-13
	kf63 0.62
	kr63 0.00048
	kf64 0.62
	kr64 0.00048
	kf65 18.4
	kr65 0.055
	kf66 18.4
	kr66 0.055
	kf67 0.0038
	kr67 8e-13
	kf68 0.0038
	kr68 8e-13
	k71 0.0002
	k72 0.0002
	k1 0
	kr13 0
	kr14 0
	k19 0
	k25 0
	kr28 0
end parameters
begin compartments
	#volume units: L
	default 3 1.0
	c1 3 1.0 #nucleus
end compartments
begin molecule types
	mRNAIKB_alpha()
	FTAz()
	A20()
	PromIkBa_RNAP3_p50p65_IkBa()
	p105()
	sa19_degraded()
	PromIkBa_RNAP3_FTAz_p50p65_IkB_alpha()
	IkBa_RNAP3_FTAz_p50p65()
	sa13_degraded()
	csa21_degraded()
	sa97_degraded()
	sa438_degraded()
	FTAy()
	sa96_degraded()
	csa9_degraded()
	ActivePRaseonp65()
	sa20_degraded()
	mRNAA20()
	PromIkBa_RNAP3_FTAz()
	sa12_degraded()
	NFkB_IKKa_Ikb_alpha()
	sa3_degraded()
	Promp65_RNAP2_FTAy()
	InactivePRaseonIkB_alpha()
	InactivePRaseonp105()
	sa8_degraded()
	csa17_degraded()
	IKK()
	csa18_degraded()
	ActivePRaseonIkB_alpha()
	Promp105_RNAP1_FTAx_p50p65()
	p50()
	IkB_alpha()
	InactivePRaseonp65()
	IKKn()
	ActivePRaseonp105()
	mRNAp65()
	Promp105_RNAP1_FTAx_p50p65_IkBa()
	sa9_degraded()
	p65()
	Promp105_RNAP()
	Promp105_RNAP1_p50p65_IkBa()
	IKKa()
	IKKa_IKB_alpha()
	PromIkBa_RNAP3()
	Promp105_RNAP1_p50p65()
	NFkB_IkB_alpha()
	FTAx()
	NFkB()
	Promp105_RNAP_FTAX()
	Promp65_RNAP2()
	mRNAp105()
	IKKi()
	PromIkBa_RNAP3_p50p65()
	sa4_degraded()
	sa444_degraded()
end molecule types
begin seed species
	@c1:FTAx() 0.000333333333333333 #FTAx #s22
	@c1:FTAy() 0.000333333333333333 #FTAy #s36
	@c1:FTAz() 0.000333333333333333 #FTAz #s65
	@c1:Promp65_RNAP2() 6.66666666666667e-06 #Promp65_RNAP2 #s193
	@c1:Promp105_RNAP() 6.66666666666667e-06 #Promp105_RNAP #s198
	@c1:PromIkBa_RNAP3() 6.66666666666667e-06 #PromIkBa_RNAP3 #s205
end seed species
begin observables
	Species FTAx_c1 @c1:FTAx() #FTAx
	Species FTAy_c1 @c1:FTAy() #FTAy
	Species FTAz_c1 @c1:FTAz() #FTAz
	Species IkB_alpha_c1 @c1:IkB_alpha() #IkB_alpha
	Species csa17_degraded_c1 @c1:csa17_degraded() #csa17_degraded
	Species sa4_degraded_default @default:sa4_degraded() #sa4_degraded
	Species p105_default @default:p105() #p105
	Species sa438_degraded_default @default:sa438_degraded() #sa438_degraded
	Species sa3_degraded_default @default:sa3_degraded() #sa3_degraded
	Species mRNAp105_default @default:mRNAp105() #mRNAp105
	Species p50_default @default:p50() #p50
	Species mRNAp65_default @default:mRNAp65() #mRNAp65
	Species sa8_degraded_default @default:sa8_degraded() #sa8_degraded
	Species p65_default @default:p65() #p65
	Species sa9_degraded_default @default:sa9_degraded() #sa9_degraded
	Species sa13_degraded_default @default:sa13_degraded() #sa13_degraded
	Species IkB_alpha_default @default:IkB_alpha() #IkB_alpha
	Species sa12_degraded_default @default:sa12_degraded() #sa12_degraded
	Species A20_c1 @c1:A20() #A20
	Species mRNAA20_default @default:mRNAA20() #mRNAA20
	Species A20_default @default:A20() #A20
	Species sa444_degraded_default @default:sa444_degraded() #sa444_degraded
	Species IKKi_default @default:IKKi() #IKKi
	Species sa19_degraded_default @default:sa19_degraded() #sa19_degraded
	Species IKKa_default @default:IKKa() #IKKa
	Species IKKn_default @default:IKKn() #IKKn
	Species sa20_degraded_default @default:sa20_degraded() #sa20_degraded
	Species IKK_c1 @c1:IKK() #IKK
	Species sa96_degraded_default @default:sa96_degraded() #sa96_degraded
	Species sa97_degraded_default @default:sa97_degraded() #sa97_degraded
	Species csa21_degraded_default @default:csa21_degraded() #csa21_degraded
	Species csa18_degraded_default @default:csa18_degraded() #csa18_degraded
	Species csa9_degraded_c1 @c1:csa9_degraded() #csa9_degraded
	Species InactivePRaseonp65_c1 @c1:InactivePRaseonp65() #InactivePRaseonp65
	Species ActivePRaseonp65_c1 @c1:ActivePRaseonp65() #ActivePRaseonp65
	Species InactivePRaseonp105_c1 @c1:InactivePRaseonp105() #InactivePRaseonp105
	Species ActivePRaseonp105_c1 @c1:ActivePRaseonp105() #ActivePRaseonp105
	Species mRNAIKB_alpha_default @default:mRNAIKB_alpha() #mRNAIKB_alpha
	Species ActivePRaseonIkB_alpha_c1 @c1:ActivePRaseonIkB_alpha() #ActivePRaseonIkB_alpha
	Species NFkB_IkB_alpha_default @default:NFkB_IkB_alpha() #NFkB:IkB_alpha
	Species NFkB_IKKa_Ikb_alpha_default @default:NFkB_IKKa_Ikb_alpha() #NFkB:IKKa:Ikb_alpha
	Species NFkB_default @default:NFkB() #NFkB
	Species IKKa_IKB_alpha_default @default:IKKa_IKB_alpha() #IKKa:IKB_alpha
	Species NFkB_IkB_alpha_c1 @c1:NFkB_IkB_alpha() #NFkB:IkB_alpha
	Species Promp65_RNAP2_c1 @c1:Promp65_RNAP2() #Promp65:RNAP2
	Species Promp65_RNAP2_FTAy_c1 @c1:Promp65_RNAP2_FTAy() #Promp65:RNAP2:FTAy
	Species NFkB_c1 @c1:NFkB() #NFkB
	Species Promp105_RNAP1_p50p65_c1 @c1:Promp105_RNAP1_p50p65() #Promp105:RNAP1:p50p65
	Species Promp105_RNAP1_p50p65_IkBa_c1 @c1:Promp105_RNAP1_p50p65_IkBa() #Promp105:RNAP1:p50p65:IkBa
	Species Promp105_RNAP_c1 @c1:Promp105_RNAP() #Promp105:RNAP
	Species Promp105_RNAP_FTAX_c1 @c1:Promp105_RNAP_FTAX() #Promp105:RNAP:FTAX
	Species Promp105_RNAP1_FTAx_p50p65_c1 @c1:Promp105_RNAP1_FTAx_p50p65() #Promp105:RNAP1:FTAx:p50p65
	Species Promp105_RNAP1_FTAx_p50p65_IkBa_c1 @c1:Promp105_RNAP1_FTAx_p50p65_IkBa() #Promp105:RNAP1:FTAx:p50p65:IkBa
	Species PromIkBa_RNAP3_c1 @c1:PromIkBa_RNAP3() #PromIkBa:RNAP3
	Species PromIkBa_RNAP3_FTAz_c1 @c1:PromIkBa_RNAP3_FTAz() #PromIkBa:RNAP3:FTAz
	Species InactivePRaseonIkB_alpha_c1 @c1:InactivePRaseonIkB_alpha() #InactivePRaseonIkB_alpha
	Species PromIkBa_RNAP3_p50p65_c1 @c1:PromIkBa_RNAP3_p50p65() #PromIkBa:RNAP3:p50p65
	Species PromIkBa_RNAP3_p50p65_IkBa_c1 @c1:PromIkBa_RNAP3_p50p65_IkBa() #PromIkBa:RNAP3:p50p65:IkBa
	Species IkBa_RNAP3_FTAz_p50p65_c1 @c1:IkBa_RNAP3_FTAz_p50p65() #IkBa:RNAP3:FTAz:p50p65
	Species PromIkBa_RNAP3_FTAz_p50p65_IkB_alpha_c1 @c1:PromIkBa_RNAP3_FTAz_p50p65_IkB_alpha() #PromIkBa:RNAP3:FTAz:p50p65:IkB_alpha
end observables
begin functions
	fRate15() = Promp65_RNAP2_FTAy_c1*k43 + Promp65_RNAP2_c1*k42
	fRate16() = Promp105_RNAP1_FTAx_p50p65_c1*k70 + Promp105_RNAP1_p50p65_c1*k69 + Promp105_RNAP_FTAX_c1*k34 + Promp105_RNAP_c1*k33
	fRate17() = IkBa_RNAP3_FTAz_p50p65_c1*k62 + PromIkBa_RNAP3_FTAz_c1*k50 + PromIkBa_RNAP3_c1*k49 + PromIkBa_RNAP3_p50p65_c1*k61
	fRate33() = NFkB_c1*k20 + k19
	fRate44() = A20_default*IKKa_default*k4 + IKKa_default*k5
	fRate45() = k3
	fRate48() = -NFkB_c1*kr15 + NFkB_default*kf15
	fRate49() = NFkB_IkB_alpha_c1*kf28 - NFkB_IkB_alpha_default*kr28
	fRate53() = -IkB_alpha_c1*kr23 + IkB_alpha_default*kf23
end functions
begin reaction rules
	re1: FTAx()@c1 + Promp105_RNAP()@c1 <-> Promp105_RNAP_FTAX()@c1 kf32,kr32
	re8: Promp105_RNAP_FTAX()@c1 + NFkB()@c1 <-> Promp105_RNAP1_FTAx_p50p65()@c1 kf64,kr64
	re14: NFkB()@c1 + PromIkBa_RNAP3_FTAz()@c1 <-> IkBa_RNAP3_FTAz_p50p65()@c1 kf56,kr56
	re15: IkB_alpha()@c1 + PromIkBa_RNAP3_p50p65()@c1 <-> PromIkBa_RNAP3_p50p65_IkBa()@c1 kf57,kr57
	re19: NFkB()@c1 + Promp105_RNAP()@c1 <-> Promp105_RNAP1_p50p65()@c1 kf63,kr63
	re20: Promp105_RNAP1_p50p65()@c1 + IkB_alpha()@c1 <-> Promp105_RNAP1_p50p65_IkBa()@c1 kf65,kr65
	re21: NFkB()@c1 + PromIkBa_RNAP3()@c1 <-> PromIkBa_RNAP3_p50p65()@c1 kf55,kr55
	re22: Promp105_RNAP1_FTAx_p50p65()@c1 + IkB_alpha()@c1 <-> Promp105_RNAP1_FTAx_p50p65_IkBa()@c1 kf66,kr66
	re23: IkB_alpha()@c1 + IkBa_RNAP3_FTAz_p50p65()@c1 <-> PromIkBa_RNAP3_FTAz_p50p65_IkB_alpha()@c1 kf58,kr58
	re24: FTAz()@c1 + PromIkBa_RNAP3()@c1 <-> PromIkBa_RNAP3_FTAz()@c1 kf48,kr48
	re25: Promp105_RNAP1_p50p65_IkBa()@c1 <-> Promp105_RNAP()@c1 + NFkB_IkB_alpha()@c1 kf67,kr67
	re26: Promp105_RNAP1_FTAx_p50p65_IkBa()@c1 <-> Promp105_RNAP_FTAX()@c1 + NFkB_IkB_alpha()@c1 kf68,kr68
	re27: PromIkBa_RNAP3_FTAz_p50p65_IkB_alpha()@c1 <-> PromIkBa_RNAP3_FTAz()@c1 + NFkB_IkB_alpha()@c1 kf60,kr60
	re28: PromIkBa_RNAP3_p50p65_IkBa()@c1 <-> PromIkBa_RNAP3()@c1 + NFkB_IkB_alpha()@c1 kf59,kr59
	re29: Promp65_RNAP2()@c1 + FTAy()@c1 <-> Promp65_RNAP2_FTAy()@c1 kf41,kr41
	re30_reactants_0: 0  -> InactivePRaseonp65()@c1 -1*(fRate15()) #Modifiers(s193, s194)
	re30_products_0: 0  -> ActivePRaseonp65()@c1 fRate15() #Modifiers(s193, s194)
	re31_reactants_0: 0  -> InactivePRaseonp105()@c1 -1*(fRate16()) #Modifiers(s200, s199, s198, s196)
	re31_products_0: 0  -> ActivePRaseonp105()@c1 fRate16() #Modifiers(s200, s199, s198, s196)
	re32_reactants_0: 0  -> InactivePRaseonIkB_alpha()@c1 -1*(fRate17()) #Modifiers(s214, s212, s205, s206)
	re32_products_0: 0  -> ActivePRaseonIkB_alpha()@c1 fRate17() #Modifiers(s214, s212, s205, s206)
	re33: NFkB()@c1 -> csa17_degraded()@c1 k54
	re34: ActivePRaseonp105()@c1 -> mRNAp105()@default k35
	re35: p105()@default -> sa4_degraded()@default k38
	re36: mRNAp105()@default -> sa3_degraded()@default k37
	re37: mRNAp105()@default -> p105()@default + mRNAp105()@default k36
	re38: p105()@default -> p50()@default k39
	re39: p50()@default -> sa438_degraded()@default k40
	re40: ActivePRaseonp65()@c1 -> mRNAp65()@default k44
	re41: mRNAp65()@default -> sa8_degraded()@default k46
	re42: p65()@default -> sa9_degraded()@default k47
	re43: mRNAp65()@default -> p65()@default + mRNAp65()@default k45
	re44: ActivePRaseonIkB_alpha()@c1 -> mRNAIKB_alpha()@default k51
	re45: mRNAIKB_alpha()@default -> sa12_degraded()@default k27
	re46: IkB_alpha()@default -> sa13_degraded()@default k21
	re47: mRNAIKB_alpha()@default -> IkB_alpha()@default + mRNAIKB_alpha()@default k22
	re48_reactants_0: 0  -> A20()@c1 -1*(fRate33()) #Modifiers(s195)
	re48_products_0: 0  -> mRNAA20()@default fRate33() #Modifiers(s195)
	re49: IKKn()@default -> IKKa()@default k1
	re52: NFkB_IkB_alpha()@default -> NFkB()@default k12
	re53: IKKn()@default -> sa19_degraded()@default k2
	re56: IKKa()@default -> sa20_degraded()@default k6
	re57: IKKa_IKB_alpha()@default -> IKKa()@default k8
	re58: IKKa()@default + NFkB_IkB_alpha()@default -> NFkB_IKKa_Ikb_alpha()@default k9
	re59: NFkB_IKKa_Ikb_alpha()@default -> NFkB()@default + IKKa()@default k10
	re60: IKKi()@default -> sa444_degraded()@default k11
	re61: mRNAA20()@default -> A20()@default + mRNAA20()@default k16
	re62: p50()@default + p65()@default <-> NFkB()@default kf52,kr52
	re63_reactants_0: 0  -> IKKa()@default -1*(fRate44()) #Modifiers(s128)
	re63_products_0: 0  -> IKKi()@default fRate44() #Modifiers(s128)
	re64_reactants_0: 0  -> IKK()@c1 -1*(fRate45())
	re64_products_0: 0  -> IKKn()@default fRate45()
	re65: IkB_alpha()@default + NFkB()@default <-> NFkB_IkB_alpha()@default kf13,kr13
	re66: IkB_alpha()@default + IKKa()@default -> IKKa_IKB_alpha()@default k7
	re67_reactants_0: 0  -> NFkB()@default -1*(fRate48())
	re67_products_0: 0  -> NFkB()@c1 5.0*fRate48()
	re68_reactants_0: 0  -> NFkB_IkB_alpha()@c1 -1*5.0*(fRate49())
	re68_products_0: 0  -> NFkB_IkB_alpha()@default fRate49()
	re69: NFkB()@c1 + IkB_alpha()@c1 <-> NFkB_IkB_alpha()@c1 kf14,kr14
	re70: mRNAA20()@default -> sa96_degraded()@default k17
	re71: A20()@default -> sa97_degraded()@default k18
	re72_reactants_0: 0  -> IkB_alpha()@default -1*(fRate53())
	re72_products_0: 0  -> IkB_alpha()@c1 5.0*fRate53()
	re74: NFkB()@default -> csa21_degraded()@default k53
	re75: NFkB_IkB_alpha()@default -> csa18_degraded()@default k71
	re76: NFkB_IkB_alpha()@c1 -> csa9_degraded()@c1 k72
end reaction rules
end model
