###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000230', 'http://identifiers.org/biomodels.db/MODEL5952988280']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/17052119']
#@BQB_IS_PART_OF:['http://identifiers.org/kegg.pathway/mmu04660']
#@BQB_IS_VERSION_OF:['http://identifiers.org/biomodels.db/BIOMD0000000140', 'http://identifiers.org/biomodels.db/BIOMD0000000139', 'http://identifiers.org/go/GO:0007249']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/10090']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is a plain translation of an SBML model created on 13/08/2021. The original model has 26 molecules and 64 reactions. The translated model has 24 molecules and 64 rules'
###
begin model
begin parameters
	k1 0.5
	k2 0.0005
	k3 0.5
	k4 0.0005
	k5 0.5
	k6 0.0005
	k7 0.5
	k8 0.0005
	k9 0.0204
	k10 0.5
	k11 0.0005
	k12 0.0075
	k13 0.5
	k14 0.0005
	k15 0.011
	k16 2.25e-05
	k17 2.25e-05
	k18 2.25e-05
	k19 0.09
	k20 8e-05
	k21 0.5
	k22 0.0005
	k23 0.5
	k24 0.0005
	k25 0.5
	k26 0.0005
	k27 1.54e-06
	k28 0.0165
	k29 0.00028
	k30 1.78e-07
	k31 0.00028
	k32 1.27e-07
	k33 0.00028
	k34 0.0225
	k35 0.00125
	k36 0.00408
	k37 0.000113
	k38 0.0003
	k39 0.0002
	k40 0.006
	k41 0.00175
	k42 0.00408
	k43 0.000113
	k44 0.00015
	k45 0.0001
	k46 0.009
	k47 0.00175
	k48 0.00408
	k49 0.000113
	k50 0.00015
	k51 0.0001
	k52 0.185
	k53 0.00125
	k54 0.0138
	k55 0.048
	k56 0.00175
	k57 0.0052
	k58 0.07
	k59 0.00175
	k60 0.0052
	k61 0.00012
	k62 0.00407
	k63 0.0015
	k64 0.0022
	source 6.022e+23 #original 1.0mol/L
end parameters
begin molecule types
	IkBanNFkBn()
	IKKIkBbNFkB()
	IkBet()
	IkBan()
	IkBaNFkB()
	NFkB()
	IKKIkBa()
	IkBen()
	IkBb()
	IkBbn()
	IkBenNFkBn()
	IKKIkBb()
	IKKIkBe()
	IkBa()
	NFkBn()
	IkBbnNFkBn()
	IkBat()
	IkBbt()
	IKKIkBaNFkB()
	IkBeNFkB()
	IKKIkBeNFkB()
	IkBe()
	IkBbNFkB()
	IKK()
end molecule types
begin seed species
	NFkB() 1.51037782e+20 # 0.00025081mol/L * 6.022e23/mol *1.0L #NFkB #NFkB
	IKK() 6.022000000000001e+22 #original 0.1mol/L  #IKK #IKK
	IkBa() 1.14586616e+23 #original 0.19028mol/L  #IkBa #IkBa
	IkBb() 1.29039416e+22 #original 0.021428mol/L  #IkBb #IkBb
	IkBe() 9.2178754e+21 #original 0.015307mol/L  #IkBe #IkBe
	IkBaNFkB() 4.94177364e+22 #original 0.082062mol/L  #IkBaNFkB #IkBaNFkB
	IkBbNFkB() 5.47779186e+21 #original 0.0090963mol/L  #IkBbNFkB #IkBbNFkB
	IkBeNFkB() 3.9129149400000003e+21 #original 0.0064977mol/L  #IkBeNFkB #IkBeNFkB
	IkBat() 3.3041509600000003e+21 #original 0.0054868mol/L  #IkBat #IkBat
	NFkBn() 1.2264405200000002e+20 #original 0.00020366mol/L  #NFkBn #NFkBn
	IkBan() 1.16381172e+23 #original 0.19326mol/L  #IkBan #IkBan
	IkBanNFkBn() 8.2736258e+20 #original 0.0013739mol/L  #IkBanNFkBn #IkBanNFkBn
	IkBbn() 1.31803514e+22 #original 0.021887mol/L  #IkBbn #IkBbn
	IkBbnNFkBn() 1.81027342e+20 #original 0.00030061mol/L  #IkBbnNFkBn #IkBbnNFkBn
	IkBbt() 3.83577312e+20 #original 0.00063696mol/L  #IkBbt #IkBbt
	IkBen() 9.415397e+21 #original 0.015635mol/L  #IkBen #IkBen
	IkBenNFkBn() 1.29310406e+20 #original 0.00021473mol/L  #IkBenNFkBn #IkBenNFkBn
	IkBet() 2.74001e+20 #original 0.000455mol/L  #IkBet #IkBet
end seed species
begin observables
	Species NFkB NFkB() #NFkB
	Species IKKIkBa IKKIkBa() #IKKIkBa
	Species IKKIkBaNFkB IKKIkBaNFkB() #IKKIkBaNFkB
	Species IKK IKK() #IKK
	Species IkBa IkBa() #IkBa
	Species IKKIkBb IKKIkBb() #IKKIkBb
	Species IKKIkBbNFkB IKKIkBbNFkB() #IKKIkBbNFkB
	Species IkBb IkBb() #IkBb
	Species IKKIkBe IKKIkBe() #IKKIkBe
	Species IKKIkBeNFkB IKKIkBeNFkB() #IKKIkBeNFkB
	Species IkBe IkBe() #IkBe
	Species IkBaNFkB IkBaNFkB() #IkBaNFkB
	Species IkBbNFkB IkBbNFkB() #IkBbNFkB
	Species IkBeNFkB IkBeNFkB() #IkBeNFkB
	Species IkBat IkBat() #IkBat
	Species NFkBn NFkBn() #NFkBn
	Species IkBan IkBan() #IkBan
	Species IkBanNFkBn IkBanNFkBn() #IkBanNFkBn
	Species IkBbn IkBbn() #IkBbn
	Species IkBbnNFkBn IkBbnNFkBn() #IkBbnNFkBn
	Species IkBbt IkBbt() #IkBbt
	Species IkBen IkBen() #IkBen
	Species IkBenNFkBn IkBenNFkBn() #IkBenNFkBn
	Species IkBet IkBet() #IkBet
end observables
begin functions
	fRate25() = NFkBn^2*k28
	fRate34() = IkBat*k36
	fRate44() = IkBbt*k42
	fRate54() = IkBet*k48
	fRate57() = k27*source
	fRate58() = k30*source
	fRate59() = k32*source
end functions
begin reaction rules
	v1: NFkB() + IKKIkBa() -> IKKIkBaNFkB() k7
	v2: IKKIkBaNFkB() -> NFkB() + IKK() k9
	v3: IKKIkBaNFkB() -> NFkB() + IKKIkBa() k8
	v4: IKK() + IkBa() -> IKKIkBa() k34
	v5: IKKIkBa() -> IKK() k62
	v6: IKKIkBa() -> IKK() + IkBa() k35
	v7: IKKIkBb() + NFkB() -> IKKIkBbNFkB() k10
	v8: IKKIkBbNFkB() -> IKK() + NFkB() k12
	v9: IKKIkBbNFkB() -> IKKIkBb() + NFkB() k11
	v10: IkBb() + IKK() -> IKKIkBb() k40
	v11: IKKIkBb() -> IKK() k63
	v12: IKKIkBb() -> IKK() + IkBb() k41
	v13: NFkB() + IKKIkBe() -> IKKIkBeNFkB() k13
	v14: IKKIkBeNFkB() -> NFkB() + IKK() k15
	v15: IKKIkBeNFkB() -> NFkB() + IKKIkBe() k14
	v16: IkBe() + IKK() -> IKKIkBe() k46
	v17: IKKIkBe() -> IKK() k64
	v18: IKKIkBe() -> IkBe() + IKK() k47
	v19: IkBaNFkB() + IKK() -> IKKIkBaNFkB() k52
	v20: IKKIkBaNFkB() -> IkBaNFkB() + IKK() k53
	v21: IkBbNFkB() + IKK() -> IKKIkBbNFkB() k55
	v22: IKKIkBbNFkB() -> IkBbNFkB() + IKK() k56
	v23: IKK() + IkBeNFkB() -> IKKIkBeNFkB() k58
	v24: IKKIkBeNFkB() -> IKK() + IkBeNFkB() k59
	v25: IkBa() + NFkB() -> IkBaNFkB() k1
	v26: 0  -> IkBat() fRate25() #Modifiers(NFkBn)
	v27: IkBaNFkB() -> IkBa() + NFkB() k2
	v28: NFkBn() + IkBan() -> IkBanNFkBn() k21
	v29: IkBanNFkBn() -> NFkBn() + IkBan() k22
	v30: IkBanNFkBn() -> IkBaNFkB() k54
	v31: IkBaNFkB() -> NFkB() k16
	v32: IkBat() -> 0  k29
	v33: IkBan() -> IkBa() k39
	v34: IkBa() -> IkBan() k38
	v35: 0  -> IkBa() fRate34() #Modifiers(IkBat)
	v36: IkBb() + NFkB() -> IkBbNFkB() k3
	v37: IkBbNFkB() -> IkBb() + NFkB() k4
	v38: IkBbn() + NFkBn() -> IkBbnNFkBn() k23
	v39: IkBbnNFkBn() -> IkBbn() + NFkBn() k24
	v40: IkBbnNFkBn() -> IkBbNFkB() k57
	v41: IkBbNFkB() -> NFkB() k17
	v42: IkBbt() -> 0  k31
	v43: IkBbn() -> IkBb() k45
	v44: IkBb() -> IkBbn() k44
	v45: 0  -> IkBb() fRate44() #Modifiers(IkBbt)
	v46: NFkB() + IkBe() -> IkBeNFkB() k5
	v47: IkBeNFkB() -> NFkB() + IkBe() k6
	v48: NFkBn() + IkBen() -> IkBenNFkBn() k25
	v49: IkBenNFkBn() -> IkBen() + NFkBn() k26
	v50: IkBenNFkBn() -> IkBeNFkB() k60
	v51: IkBeNFkB() -> NFkB() k18
	v52: IkBet() -> 0  k33
	v53: IkBen() -> IkBe() k51
	v54: IkBe() -> IkBen() k50
	v55: 0  -> IkBe() fRate54() #Modifiers(IkBet)
	v56: NFkBn() -> NFkB() k20
	v57: NFkB() -> NFkBn() k19
	v58: 0  -> IkBat() fRate57()
	v59: 0  -> IkBbt() fRate58()
	v60: 0  -> IkBet() fRate59()
	v61: IkBa() -> 0  k37
	v62: IkBb() -> 0  k43
	v63: IkBe() -> 0  k49
	v64: IKK() -> 0  k61
end reaction rules
end model
