###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000235', 'http://identifiers.org/biomodels.db/MODEL2133240427']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/19698179']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/7668']
#@BQB_HAS_VERSION:['http://identifiers.org/kegg.pathway/spu04310', 'http://identifiers.org/go/GO:0007219', 'http://identifiers.org/kegg.pathway/spu04330', 'http://identifiers.org/go/GO:0060070']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0042663']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046']
#@creatorEmail:'juty@ebi.ac.uk'
#@creatorName:'Juty Nick'
#@notes:'This is a plain translation of an SBML model created on 13/08/2021. The original model has 622 molecules and 778 reactions. The translated model has 588 molecules and 1145 rules'
###
begin model
begin parameters
	E_Notch_S2 1.0
	E_Otx_S1 1.0
	E_SoxB1_S1 1.0
	E_SuH_S2 1.0
	E_UMR_S2 1.0
	E_UVAOtx_S2 1.0
	E_UbiqSoxB1_S1 1.0
	E_VEGF_S2 1.0
	E_cB_S1 1.0
	E_Gcad_S1 1.0
	M_UMANrl_S2 1.0
	P_L1_S2 1.0
	M_UMADelta_S2 1.0
	M_UMR_S2 1.0
	M_SuH_S2 1.0
	M_Notch_S1 1.0
	P_UbiqAlx1_S1 1.0
	P_UbiqEts1_S1 1.0
	P_UbiqHnf6_S1 1.0
	P_UbiqTel_S1 1.0
	M_Gcad_S1 1.0
	P_Gcad_S1 1.0
	P_UbiqES_S1 1.0
	P_UbiqSoxC_S1 1.0
	E_UbiqSoxC_S1 1.0
	P_Otx_S1 1.0
	M_SoxB1_S1 1.0
	P_cB_S1 1.0
	M_UbiqSoxB1_S1 1.0
	P_UbiqHesC_S1 1.0
	P_Ets1_S1 1.0
	M_cB_S1 1.0
	M_Otx_S1 1.0
	E_Notch_S1 0
	E_Otx_S2 0
	E_SoxB1_S2 0
	E_SuH_S1 0
	E_UMR_S1 0
	E_UVAOtx_S1 0
	E_UbiqSoxB1_S2 0
	E_VEGF_S1 0
	E_cB_S2 0
	E_Gcad_S2 0
	M_UMANrl_S1 0
	P_L1_S1 0
	M_UMADelta_S1 0
	M_UMR_S1 0
	M_SuH_S1 0
	M_Notch_S2 0
	P_UbiqAlx1_S2 0
	P_UbiqEts1_S2 0
	P_UbiqHnf6_S2 0
	P_UbiqTel_S2 0
	M_Gcad_S2 0
	P_Gcad_S2 0
	P_UbiqES_S2 0
	P_UbiqSoxC_S2 0
	E_UbiqSoxC_S2 0
	P_Otx_S2 0
	M_SoxB1_S2 0
	P_cB_S2 0
	M_UbiqSoxB1_S2 0
	P_UbiqHesC_S2 0
	P_Ets1_S2 0
	M_cB_S2 0
	M_Otx_S2 0
	ribosome_Compartment__cell 6.022e+23 #original 1.0mol/L
	ribosome 6.022e+23 #original 1.0mol/L
	r1_P_Gcad_HillH 8.000000
	r1_P_Gcad_HillK 10.000000
	r1_P_Gcad_theta1 1.000000
	r1_P_Gcad_theta2 11.000000
	r2_P_Notch_HillH 8.000000
	r2_P_Notch_HillK 10.000000
	r2_P_Notch_theta1 21.000000
	r2_P_Notch_theta2 30.000000
	r3_P_Otx_HillK 10.000000
	r3_P_Otx_HillH 8.000000
	r3_P_Otx_theta1 1.000000
	r3_P_Otx_theta2 11.000000
	r4_P_SoxB1_theta1 1.000000
	r4_P_SoxB1_theta2 14.000000
	r4_P_SoxB1_HillK 10.000000
	r4_P_SoxB1_HillH 8.000000
	r5_P_SuH_HillH 8.000000
	r5_P_SuH_HillK 10.000000
	r5_P_SuH_theta1 24.000000
	r5_P_SuH_theta2 30.000000
	r6_P_UMR_HillH 8.000000
	r6_P_UMR_HillK 10.000000
	r6_P_UMR_theta1 15.000000
	r6_P_UMR_theta2 30.000000
	r7_P_UVAOtx_theta2 30.000000
	r7_P_UVAOtx_theta1 18.000000
	r7_P_UVAOtx_HillK 10.000000
	r7_P_UVAOtx_HillH 8.000000
	r8_P_UbiqSoxB1_theta2 17.000000
	r8_P_UbiqSoxB1_theta1 1.000000
	r8_P_UbiqSoxB1_HillK 10.000000
	r8_P_UbiqSoxB1_HillH 8.000000
	r9_P_VEGF_theta2 30.000000
	r9_P_VEGF_theta1 24.000000
	r9_P_VEGF_HillH 8.000000
	r9_P_VEGF_HillK 10.000000
	r10_P_cB_theta1 1.000000
	r10_P_cB_theta2 11.000000
	r10_P_cB_HillH 8.000000
	r10_P_cB_HillK 10.000000
	r11_k_PROTEIN_UbiqAlx1 1.000000
	r11_c_PROTEIN_UbiqAlx1 1.000000
	r11_k_PROTEIN_Ets1 1.000000
	r11_c_PROTEIN_Ets1 1.000000
	r11_k_PROTEIN_Gcm 1.000000
	r11_c_PROTEIN_Gcm 1.000000
	r11_k_PROTEIN_HesC 1.000000
	r11_c_PROTEIN_HesC 1.000000
	r11_k_PROTEIN_Tgif 1.000000
	r11_c_PROTEIN_Tgif 1.000000
	r12_k_PROTEIN_Bra 1.000000
	r12_c_PROTEIN_Bra 1.000000
	r12_k_PROTEIN_Hox 1.000000
	r12_c_PROTEIN_Hox 1.000000
	r13_k_PROTEIN_Blimp1 1.000000
	r13_c_PROTEIN_Blimp1 1.000000
	r13_k_PROTEIN_nBTCF 1.000000
	r13_c_PROTEIN_nBTCF 1.000000
	r13_k_PROTEIN_Brn 1.000000
	r13_c_PROTEIN_Brn 1.000000
	r13_k_PROTEIN_GroTCF 1.000000
	r13_c_PROTEIN_GroTCF 1.000000
	r13_k_PROTEIN_Eve 1.000000
	r13_c_PROTEIN_Eve 1.000000
	r13_k_PROTEIN_Otx 1.000000
	r13_c_PROTEIN_Otx 1.000000
	r13_k_PROTEIN_GataE 1.000000
	r13_c_PROTEIN_GataE 1.000000
	r14_k_PROTEIN_GroTCF 1.000000
	r14_c_PROTEIN_GroTCF 1.000000
	r14_k_PROTEIN_Otx 1.000000
	r14_c_PROTEIN_Otx 1.000000
	r14_k_PROTEIN_GataE 1.000000
	r14_c_PROTEIN_GataE 1.000000
	r14_k_PROTEIN_nBTCF 1.000000
	r14_c_PROTEIN_nBTCF 1.000000
	r15_k_PROTEIN_GataE 1.000000
	r15_c_PROTEIN_GataE 1.000000
	r16_k_PROTEIN_Ets1 1.000000
	r16_c_PROTEIN_Ets1 1.000000
	r16_k_PROTEIN_SoxB1 1.000000
	r16_c_PROTEIN_SoxB1 1.000000
	r16_k_PROTEIN_Dri 1.000000
	r16_c_PROTEIN_Dri 1.000000
	r17_k_PROTEIN_Ets1 1.000000
	r17_c_PROTEIN_Ets1 1.000000
	r17_k_PROTEIN_HesC 1.000000
	r17_c_PROTEIN_HesC 1.000000
	r17_k_PROTEIN_UbiqDelta 1.000000
	r17_c_PROTEIN_UbiqDelta 1.000000
	r17_k_PROTEIN_UMADelta 1.000000
	r17_c_PROTEIN_UMADelta 1.000000
	r18_k_PROTEIN_Gcm 1.000000
	r18_c_PROTEIN_Gcm 1.000000
	r19_k_PROTEIN_Ets1 1.000000
	r19_c_PROTEIN_Ets1 1.000000
	r19_k_PROTEIN_Alx1 1.000000
	r19_c_PROTEIN_Alx1 1.000000
	r20_k_PROTEIN_UbiqES 1.000000
	r20_c_PROTEIN_UbiqES 1.000000
	r20_k_PROTEIN_HesC 1.000000
	r20_c_PROTEIN_HesC 1.000000
	r20_k_PROTEIN_Dri 1.000000
	r20_c_PROTEIN_Dri 1.000000
	r21_k_PROTEIN_Otx 1.000000
	r21_c_PROTEIN_Otx 1.000000
	r21_k_PROTEIN_Brn 1.000000
	r21_c_PROTEIN_Brn 1.000000
	r22_k_PROTEIN_Ets1 1.000000
	r22_c_PROTEIN_Ets1 1.000000
	r22_k_PROTEIN_Hex 1.000000
	r22_c_PROTEIN_Hex 1.000000
	r22_k_PROTEIN_TBr 1.000000
	r22_c_PROTEIN_TBr 1.000000
	r23_k_PROTEIN_UbiqEts1 1.000000
	r23_c_PROTEIN_UbiqEts1 1.000000
	r23_k_PROTEIN_HesC 1.000000
	r23_c_PROTEIN_HesC 1.000000
	r24_k_PROTEIN_GroTCF 1.000000
	r24_c_PROTEIN_GroTCF 1.000000
	r24_k_PROTEIN_Blimp1 1.000000
	r24_c_PROTEIN_Blimp1 1.000000
	r24_k_PROTEIN_nBTCF 1.000000
	r24_c_PROTEIN_nBTCF 1.000000
	r24_k_PROTEIN_Hox 1.000000
	r24_c_PROTEIN_Hox 1.000000
	r25_k_PROTEIN_Ets1 1.000000
	r25_c_PROTEIN_Ets1 1.000000
	r25_k_PROTEIN_Hex 1.000000
	r25_c_PROTEIN_Hex 1.000000
	r25_k_PROTEIN_Erg 1.000000
	r25_c_PROTEIN_Erg 1.000000
	r25_k_PROTEIN_Hnf6 1.000000
	r25_c_PROTEIN_Hnf6 1.000000
	r26_k_PROTEIN_GroTFC 1.000000
	r26_c_PROTEIN_GroTFC 1.000000
	r26_k_PROTEIN_FoxA 1.000000
	r26_c_PROTEIN_FoxA 1.000000
	r26_k_PROTEIN_nBTCF 1.000000
	r26_c_PROTEIN_nBTCF 1.000000
	r26_k_PROTEIN_Tgif 1.000000
	r26_c_PROTEIN_Tgif 1.000000
	r26_k_PROTEIN_Bra 1.000000
	r26_c_PROTEIN_Bra 1.000000
	r26_k_PROTEIN_Otx 1.000000
	r26_c_PROTEIN_Otx 1.000000
	r26_k_PROTEIN_GataE 1.000000
	r26_c_PROTEIN_GataE 1.000000
	r27_k_PROTEIN_Ets1 1.000000
	r27_c_PROTEIN_Ets1 1.000000
	r27_k_PROTEIN_Dri 1.000000
	r27_c_PROTEIN_Dri 1.000000
	r27_k_PROTEIN_TBr 1.000000
	r27_c_PROTEIN_TBr 1.000000
	r27_k_PROTEIN_FoxB 1.000000
	r27_c_PROTEIN_FoxB 1.000000
	r27_k_PROTEIN_Alx1 1.000000
	r27_c_PROTEIN_Alx1 1.000000
	r28_k_PROTEIN_nBTCF 1.000000
	r28_c_PROTEIN_nBTCF 1.000000
	r29_k_PROTEIN_Ets1 1.000000
	r29_c_PROTEIN_Ets1 1.000000
	r29_k_PROTEIN_Hex 1.000000
	r29_c_PROTEIN_Hex 1.000000
	r29_k_PROTEIN_Erg 1.000000
	r29_c_PROTEIN_Erg 1.000000
	r29_k_PROTEIN_Tgif 1.000000
	r29_c_PROTEIN_Tgif 1.000000
	r30_k_PROTEIN_GataE 1.000000
	r30_c_PROTEIN_GataE 1.000000
	r30_k_PROTEIN_Gcm 1.000000
	r30_c_PROTEIN_Gcm 1.000000
	r31_k_PROTEIN_GataC 1.000000
	r31_c_PROTEIN_GataC 1.000000
	r31_k_PROTEIN_GCM 1.000000
	r31_c_PROTEIN_GCM 1.000000
	r31_k_PROTEIN_GataE 1.000000
	r31_c_PROTEIN_GataE 1.000000
	r31_k_PROTEIN_Hnf6 1.000000
	r31_c_PROTEIN_Hnf6 1.000000
	r32_k_PROTEIN_Otx 1.000000
	r32_c_PROTEIN_Otx 1.000000
	r32_k_PROTEIN_Hox 1.000000
	r32_c_PROTEIN_Hox 1.000000
	r32_k_PROTEIN_SuHN 1.000000
	r32_c_PROTEIN_SuHN 1.000000
	r33_k_PROTEIN_Snail 1.000000
	r33_c_PROTEIN_Snail 1.000000
	r33_k_PROTEIN_UbiqGcad 1.000000
	r33_c_PROTEIN_UbiqGcad 1.000000
	r34_k_PROTEIN_FoxA 1.000000
	r34_c_PROTEIN_FoxA 1.000000
	r34_k_PROTEIN_nBTCF 1.000000
	r34_c_PROTEIN_nBTCF 1.000000
	r34_k_PROTEIN_Alx1 1.000000
	r34_c_PROTEIN_Alx1 1.000000
	r34_k_PROTEIN_GroTCF 1.000000
	r34_c_PROTEIN_GroTCF 1.000000
	r34_k_PROTEIN_SuHN 1.000000
	r34_c_PROTEIN_SuHN 1.000000
	r34_k_PROTEIN_Gcm 1.000000
	r34_c_PROTEIN_Gcm 1.000000
	r35_k_PROTEIN_Bra 1.000000
	r35_c_PROTEIN_Bra 1.000000
	r36_k_PROTEIN_UbiqHesC 1.000000
	r36_c_PROTEIN_UbiqHesC 1.000000
	r36_k_PROTEIN_Pmar1 1.000000
	r36_c_PROTEIN_Pmar1 1.000000
	r37_k_PROTEIN_Ets1 1.000000
	r37_c_PROTEIN_Ets1 1.000000
	r37_k_PROTEIN_Erg 1.000000
	r37_c_PROTEIN_Erg 1.000000
	r37_k_PROTEIN_Tgif 1.000000
	r37_c_PROTEIN_Tgif 1.000000
	r38_k_PROTEIN_UbiqHnf6 1.000000
	r38_c_PROTEIN_UbiqHnf6 1.000000
	r39_k_PROTEIN_GroTCF 1.000000
	r39_c_PROTEIN_GroTCF 1.000000
	r39_k_PROTEIN_Blimp1 1.000000
	r39_c_PROTEIN_Blimp1 1.000000
	r39_k_PROTEIN_Otx 1.000000
	r39_c_PROTEIN_Otx 1.000000
	r39_k_PROTEIN_Eve 1.000000
	r39_c_PROTEIN_Eve 1.000000
	r39_k_PROTEIN_nBTCF 1.000000
	r39_c_PROTEIN_nBTCF 1.000000
	r40_k_PROTEIN_Bra 1.000000
	r40_c_PROTEIN_Bra 1.000000
	r41_k_PROTEIN_Otx 1.000000
	r41_c_PROTEIN_Otx 1.000000
	r41_k_PROTEIN_GataE 1.000000
	r41_c_PROTEIN_GataE 1.000000
	r42_k_PROTEIN_FoxB 1.000000
	r42_c_PROTEIN_FoxB 1.000000
	r42_k_PROTEIN_Hex 1.000000
	r42_c_PROTEIN_Hex 1.000000
	r42_k_PROTEIN_Alx1 1.000000
	r42_c_PROTEIN_Alx1 1.000000
	r42_k_PROTEIN_Erg 1.000000
	r42_c_PROTEIN_Erg 1.000000
	r42_k_PROTEIN_Ets1 1.000000
	r42_c_PROTEIN_Ets1 1.000000
	r42_k_PROTEIN_TBr 1.000000
	r42_c_PROTEIN_TBr 1.000000
	r42_k_PROTEIN_Hnf6 1.000000
	r42_c_PROTEIN_Hnf6 1.000000
	r43_k_PROTEIN_Hex 1.000000
	r43_c_PROTEIN_Hex 1.000000
	r43_k_PROTEIN_Ets1 1.000000
	r43_c_PROTEIN_Ets1 1.000000
	r43_k_PROTEIN_VEGFSignal 1.000000
	r43_c_PROTEIN_VEGFSignal 1.000000
	r43_k_PROTEIN_Erg 1.000000
	r43_c_PROTEIN_Erg 1.000000
	r43_k_PROTEIN_Alx1 1.000000
	r43_c_PROTEIN_Alx1 1.000000
	r44_k_PROTEIN_GataE 1.000000
	r44_c_PROTEIN_GataE 1.000000
	r45_k_PROTEIN_HesC 1.000000
	r45_c_PROTEIN_HesC 1.000000
	r45_k_PROTEIN_Tgif 1.000000
	r45_c_PROTEIN_Tgif 1.000000
	r45_k_PROTEIN_TBr 1.000000
	r45_c_PROTEIN_TBr 1.000000
	r45_k_PROTEIN_UMANrl 1.000000
	r45_c_PROTEIN_UMANrl 1.000000
	r45_k_PROTEIN_FoxN23 1.000000
	r45_c_PROTEIN_FoxN23 1.000000
	r45_k_PROTEIN_GataE 1.000000
	r45_c_PROTEIN_GataE 1.000000
	r46_k_PROTEIN_Bra 1.000000
	r46_c_PROTEIN_Bra 1.000000
	r46_k_PROTEIN_Hox 1.000000
	r46_c_PROTEIN_Hox 1.000000
	r47_k_PROTEIN_UVAOtx 1.000000
	r47_c_PROTEIN_UVAOtx 1.000000
	r47_k_PROTEIN_Otx 1.000000
	r47_c_PROTEIN_Otx 1.000000
	r47_k_PROTEIN_GataE 1.000000
	r47_c_PROTEIN_GataE 1.000000
	r47_k_PROTEIN_Blimp1 1.000000
	r47_c_PROTEIN_Blimp1 1.000000
	r48_k_PROTEIN_GataE 1.000000
	r48_c_PROTEIN_GataE 1.000000
	r48_k_PROTEIN_Gcm 1.000000
	r48_c_PROTEIN_Gcm 1.000000
	r49_k_PROTEIN_GroTCF 1.000000
	r49_c_PROTEIN_GroTCF 1.000000
	r49_k_PROTEIN_Otx 1.000000
	r49_c_PROTEIN_Otx 1.000000
	r49_k_PROTEIN_nBTCF 1.000000
	r49_c_PROTEIN_nBTCF 1.000000
	r50_k_PROTEIN_Ets1 1.000000
	r50_c_PROTEIN_Ets1 1.000000
	r50_k_PROTEIN_Hex 1.000000
	r50_c_PROTEIN_Hex 1.000000
	r50_k_PROTEIN_Alx1 1.000000
	r50_c_PROTEIN_Alx1 1.000000
	r50_k_PROTEIN_Dri 1.000000
	r50_c_PROTEIN_Dri 1.000000
	r50_k_PROTEIN_Erg 1.000000
	r50_c_PROTEIN_Erg 1.000000
	r50_k_PROTEIN_Tel 1.000000
	r50_c_PROTEIN_Tel 1.000000
	r50_k_PROTEIN_Hnf6 1.000000
	r50_c_PROTEIN_Hnf6 1.000000
	r51_k_PROTEIN_VEGFSignal 1.000000
	r51_c_PROTEIN_VEGFSignal 1.000000
	r52_k_PROTEIN_Ets1 1.000000
	r52_c_PROTEIN_Ets1 1.000000
	r52_k_PROTEIN_Hex 1.000000
	r52_c_PROTEIN_Hex 1.000000
	r52_k_PROTEIN_Alx1 1.000000
	r52_c_PROTEIN_Alx1 1.000000
	r52_k_PROTEIN_Dri 1.000000
	r52_c_PROTEIN_Dri 1.000000
	r52_k_PROTEIN_Erg 1.000000
	r52_c_PROTEIN_Erg 1.000000
	r52_k_PROTEIN_VEGFSignal 1.000000
	r52_c_PROTEIN_VEGFSignal 1.000000
	r52_k_PROTEIN_Tel 1.000000
	r52_c_PROTEIN_Tel 1.000000
	r52_k_PROTEIN_Hnf6 1.000000
	r52_c_PROTEIN_Hnf6 1.000000
	r53_k_PROTEIN_Hex 1.000000
	r53_c_PROTEIN_Hex 1.000000
	r54_k_PROTEIN_UbiqSoxB1 1.000000
	r54_c_PROTEIN_UbiqSoxB1 1.000000
	r54_k_PROTEIN_SoxB1 1.000000
	r54_c_PROTEIN_SoxB1 1.000000
	r55_k_PROTEIN_SoxC 1.000000
	r55_c_PROTEIN_SoxC 1.000000
	r55_k_PROTEIN_HesC 1.000000
	r55_c_PROTEIN_HesC 1.000000
	r55_k_PROTEIN_UbiqSoxC 1.000000
	r55_c_PROTEIN_UbiqSoxC 1.000000
	r56_k_PROTEIN_GataE 1.000000
	r56_c_PROTEIN_GataE 1.000000
	r56_k_PROTEIN_Gcm 1.000000
	r56_c_PROTEIN_Gcm 1.000000
	r57_k_PROTEIN_Ets1 1.000000
	r57_c_PROTEIN_Ets1 1.000000
	r57_k_PROTEIN_TBr 1.000000
	r57_c_PROTEIN_TBr 1.000000
	r57_k_PROTEIN_HesC 1.000000
	r57_c_PROTEIN_HesC 1.000000
	r58_k_PROTEIN_UbiqTel 1.000000
	r58_c_PROTEIN_UbiqTel 1.000000
	r58_k_PROTEIN_Tel 1.000000
	r58_c_PROTEIN_Tel 1.000000
	r58_k_PROTEIN_HesC 1.000000
	r58_c_PROTEIN_HesC 1.000000
	r59_k_PROTEIN_Ets1 1.000000
	r59_c_PROTEIN_Ets1 1.000000
	r59_k_PROTEIN_Hex 1.000000
	r59_c_PROTEIN_Hex 1.000000
	r59_k_PROTEIN_Erg 1.000000
	r59_c_PROTEIN_Erg 1.000000
	r59_k_PROTEIN_Tgif 1.000000
	r59_c_PROTEIN_Tgif 1.000000
	r60_k_PROTEIN_Hex 1.000000
	r60_c_PROTEIN_Hex 1.000000
	r60_k_PROTEIN_Ets1 1.000000
	r60_c_PROTEIN_Ets1 1.000000
	r60_k_PROTEIN_Dri 1.000000
	r60_c_PROTEIN_Dri 1.000000
	r60_k_PROTEIN_Alx1 1.000000
	r60_c_PROTEIN_Alx1 1.000000
	r61_k_PROTEIN_GroTCF 1.000000
	r61_c_PROTEIN_GroTCF 1.000000
	r61_k_PROTEIN_Blimp1 1.000000
	r61_c_PROTEIN_Blimp1 1.000000
	r61_k_PROTEIN_nBTCF 1.000000
	r61_c_PROTEIN_nBTCF 1.000000
	r62_k_PROTEIN_GroTCF 1.000000
	r62_c_PROTEIN_GroTCF 1.000000
	r62_k_PROTEIN_nBTCF 1.000000
	r62_c_PROTEIN_nBTCF 1.000000
	r62_k_PROTEIN_Hnf6 1.000000
	r62_c_PROTEIN_Hnf6 1.000000
	r63_k_PROTEIN_UbiqAlx1 1.000000
	r63_c_PROTEIN_UbiqAlx1 1.000000
	r63_k_PROTEIN_Ets1 1.000000
	r63_c_PROTEIN_Ets1 1.000000
	r63_k_PROTEIN_Gcm 1.000000
	r63_c_PROTEIN_Gcm 1.000000
	r63_k_PROTEIN_HesC 1.000000
	r63_c_PROTEIN_HesC 1.000000
	r63_k_PROTEIN_Tgif 1.000000
	r63_c_PROTEIN_Tgif 1.000000
	r64_k_PROTEIN_Bra 1.000000
	r64_c_PROTEIN_Bra 1.000000
	r64_k_PROTEIN_Hox 1.000000
	r64_c_PROTEIN_Hox 1.000000
	r65_k_PROTEIN_Blimp1 1.000000
	r65_c_PROTEIN_Blimp1 1.000000
	r65_k_PROTEIN_nBTCF 1.000000
	r65_c_PROTEIN_nBTCF 1.000000
	r65_k_PROTEIN_Brn 1.000000
	r65_c_PROTEIN_Brn 1.000000
	r65_k_PROTEIN_GroTCF 1.000000
	r65_c_PROTEIN_GroTCF 1.000000
	r65_k_PROTEIN_Eve 1.000000
	r65_c_PROTEIN_Eve 1.000000
	r65_k_PROTEIN_Otx 1.000000
	r65_c_PROTEIN_Otx 1.000000
	r65_k_PROTEIN_GataE 1.000000
	r65_c_PROTEIN_GataE 1.000000
	r66_k_PROTEIN_GroTCF 1.000000
	r66_c_PROTEIN_GroTCF 1.000000
	r66_k_PROTEIN_Otx 1.000000
	r66_c_PROTEIN_Otx 1.000000
	r66_k_PROTEIN_GataE 1.000000
	r66_c_PROTEIN_GataE 1.000000
	r66_k_PROTEIN_nBTCF 1.000000
	r66_c_PROTEIN_nBTCF 1.000000
	r67_k_PROTEIN_GataE 1.000000
	r67_c_PROTEIN_GataE 1.000000
	r68_k_PROTEIN_Bra 1.000000
	r68_c_PROTEIN_Bra 1.000000
	r69_k_PROTEIN_Ets1 1.000000
	r69_c_PROTEIN_Ets1 1.000000
	r69_k_PROTEIN_SoxB1 1.000000
	r69_c_PROTEIN_SoxB1 1.000000
	r69_k_PROTEIN_Dri 1.000000
	r69_c_PROTEIN_Dri 1.000000
	r70_k_PROTEIN_Ets1 1.000000
	r70_c_PROTEIN_Ets1 1.000000
	r70_k_PROTEIN_HesC 1.000000
	r70_c_PROTEIN_HesC 1.000000
	r70_k_PROTEIN_UbiqDelta 1.000000
	r70_c_PROTEIN_UbiqDelta 1.000000
	r70_k_PROTEIN_UMADelta 1.000000
	r70_c_PROTEIN_UMADelta 1.000000
	r71_k_PROTEIN_Bra 1.000000
	r71_c_PROTEIN_Bra 1.000000
	r71_k_PROTEIN_Gcm 1.000000
	r71_c_PROTEIN_Gcm 1.000000
	r72_k_PROTEIN_Ets1 1.000000
	r72_c_PROTEIN_Ets1 1.000000
	r72_k_PROTEIN_Alx1 1.000000
	r72_c_PROTEIN_Alx1 1.000000
	r73_k_PROTEIN_Otx 1.000000
	r73_c_PROTEIN_Otx 1.000000
	r73_k_PROTEIN_Brn 1.000000
	r73_c_PROTEIN_Brn 1.000000
	r74_k_PROTEIN_Ets1 1.000000
	r74_c_PROTEIN_Ets1 1.000000
	r74_k_PROTEIN_Hex 1.000000
	r74_c_PROTEIN_Hex 1.000000
	r74_k_PROTEIN_TBr 1.000000
	r74_c_PROTEIN_TBr 1.000000
	r75_k_PROTEIN_UbiqEts1 1.000000
	r75_c_PROTEIN_UbiqEts1 1.000000
	r75_k_PROTEIN_HesC 1.000000
	r75_c_PROTEIN_HesC 1.000000
	r76_k_PROTEIN_GroTCF 1.000000
	r76_c_PROTEIN_GroTCF 1.000000
	r76_k_PROTEIN_Blimp1 1.000000
	r76_c_PROTEIN_Blimp1 1.000000
	r76_k_PROTEIN_nBTCF 1.000000
	r76_c_PROTEIN_nBTCF 1.000000
	r76_k_PROTEIN_Hox 1.000000
	r76_c_PROTEIN_Hox 1.000000
	r77_k_PROTEIN_Ets1 1.000000
	r77_c_PROTEIN_Ets1 1.000000
	r77_k_PROTEIN_Hex 1.000000
	r77_c_PROTEIN_Hex 1.000000
	r77_k_PROTEIN_Erg 1.000000
	r77_c_PROTEIN_Erg 1.000000
	r77_k_PROTEIN_Hnf6 1.000000
	r77_c_PROTEIN_Hnf6 1.000000
	r78_k_PROTEIN_GroTFC 1.000000
	r78_c_PROTEIN_GroTFC 1.000000
	r78_k_PROTEIN_FoxA 1.000000
	r78_c_PROTEIN_FoxA 1.000000
	r78_k_PROTEIN_nBTCF 1.000000
	r78_c_PROTEIN_nBTCF 1.000000
	r78_k_PROTEIN_Tgif 1.000000
	r78_c_PROTEIN_Tgif 1.000000
	r78_k_PROTEIN_Bra 1.000000
	r78_c_PROTEIN_Bra 1.000000
	r78_k_PROTEIN_Otx 1.000000
	r78_c_PROTEIN_Otx 1.000000
	r78_k_PROTEIN_GataE 1.000000
	r78_c_PROTEIN_GataE 1.000000
	r79_k_PROTEIN_Ets1 1.000000
	r79_c_PROTEIN_Ets1 1.000000
	r79_k_PROTEIN_Dri 1.000000
	r79_c_PROTEIN_Dri 1.000000
	r79_k_PROTEIN_TBr 1.000000
	r79_c_PROTEIN_TBr 1.000000
	r79_k_PROTEIN_FoxB 1.000000
	r79_c_PROTEIN_FoxB 1.000000
	r79_k_PROTEIN_Alx1 1.000000
	r79_c_PROTEIN_Alx1 1.000000
	r80_k_PROTEIN_nBTCF 1.000000
	r80_c_PROTEIN_nBTCF 1.000000
	r81_k_PROTEIN_Ets1 1.000000
	r81_c_PROTEIN_Ets1 1.000000
	r81_k_PROTEIN_Hex 1.000000
	r81_c_PROTEIN_Hex 1.000000
	r81_k_PROTEIN_Erg 1.000000
	r81_c_PROTEIN_Erg 1.000000
	r81_k_PROTEIN_Tgif 1.000000
	r81_c_PROTEIN_Tgif 1.000000
	r82_k_PROTEIN_GataE 1.000000
	r82_c_PROTEIN_GataE 1.000000
	r82_k_PROTEIN_Gcm 1.000000
	r82_c_PROTEIN_Gcm 1.000000
	r83_k_PROTEIN_GataC 1.000000
	r83_c_PROTEIN_GataC 1.000000
	r83_k_PROTEIN_GCM 1.000000
	r83_c_PROTEIN_GCM 1.000000
	r83_k_PROTEIN_GataE 1.000000
	r83_c_PROTEIN_GataE 1.000000
	r83_k_PROTEIN_Hnf6 1.000000
	r83_c_PROTEIN_Hnf6 1.000000
	r84_k_PROTEIN_Otx 1.000000
	r84_c_PROTEIN_Otx 1.000000
	r84_k_PROTEIN_Hox 1.000000
	r84_c_PROTEIN_Hox 1.000000
	r84_k_PROTEIN_SuHN 1.000000
	r84_c_PROTEIN_SuHN 1.000000
	r85_k_PROTEIN_Snail 1.000000
	r85_c_PROTEIN_Snail 1.000000
	r85_k_PROTEIN_UbiqGcad 1.000000
	r85_c_PROTEIN_UbiqGcad 1.000000
	r86_k_PROTEIN_FoxA 1.000000
	r86_c_PROTEIN_FoxA 1.000000
	r86_k_PROTEIN_nBTCF 1.000000
	r86_c_PROTEIN_nBTCF 1.000000
	r86_k_PROTEIN_Alx1 1.000000
	r86_c_PROTEIN_Alx1 1.000000
	r86_k_PROTEIN_GroTCF 1.000000
	r86_c_PROTEIN_GroTCF 1.000000
	r86_k_PROTEIN_SuHN 1.000000
	r86_c_PROTEIN_SuHN 1.000000
	r86_k_PROTEIN_Gcm 1.000000
	r86_c_PROTEIN_Gcm 1.000000
	r87_k_PROTEIN_Bra 1.000000
	r87_c_PROTEIN_Bra 1.000000
	r88_k_PROTEIN_UbiqHesC 1.000000
	r88_c_PROTEIN_UbiqHesC 1.000000
	r88_k_PROTEIN_Pmar1 1.000000
	r88_c_PROTEIN_Pmar1 1.000000
	r89_k_PROTEIN_Ets1 1.000000
	r89_c_PROTEIN_Ets1 1.000000
	r89_k_PROTEIN_Erg 1.000000
	r89_c_PROTEIN_Erg 1.000000
	r89_k_PROTEIN_Tgif 1.000000
	r89_c_PROTEIN_Tgif 1.000000
	r90_k_PROTEIN_UbiqHnf6 1.000000
	r90_c_PROTEIN_UbiqHnf6 1.000000
	r91_k_PROTEIN_GroTCF 1.000000
	r91_c_PROTEIN_GroTCF 1.000000
	r91_k_PROTEIN_Blimp1 1.000000
	r91_c_PROTEIN_Blimp1 1.000000
	r91_k_PROTEIN_Otx 1.000000
	r91_c_PROTEIN_Otx 1.000000
	r91_k_PROTEIN_Eve 1.000000
	r91_c_PROTEIN_Eve 1.000000
	r91_k_PROTEIN_nBTCF 1.000000
	r91_c_PROTEIN_nBTCF 1.000000
	r92_k_PROTEIN_Bra 1.000000
	r92_c_PROTEIN_Bra 1.000000
	r93_k_PROTEIN_Otx 1.000000
	r93_c_PROTEIN_Otx 1.000000
	r93_k_PROTEIN_GataE 1.000000
	r93_c_PROTEIN_GataE 1.000000
	r94_k_PROTEIN_FoxB 1.000000
	r94_c_PROTEIN_FoxB 1.000000
	r94_k_PROTEIN_Hex 1.000000
	r94_c_PROTEIN_Hex 1.000000
	r94_k_PROTEIN_Alx1 1.000000
	r94_c_PROTEIN_Alx1 1.000000
	r94_k_PROTEIN_Erg 1.000000
	r94_c_PROTEIN_Erg 1.000000
	r94_k_PROTEIN_Ets1 1.000000
	r94_c_PROTEIN_Ets1 1.000000
	r94_k_PROTEIN_TBr 1.000000
	r94_c_PROTEIN_TBr 1.000000
	r94_k_PROTEIN_Hnf6 1.000000
	r94_c_PROTEIN_Hnf6 1.000000
	r95_k_PROTEIN_Hex 1.000000
	r95_c_PROTEIN_Hex 1.000000
	r95_k_PROTEIN_Ets1 1.000000
	r95_c_PROTEIN_Ets1 1.000000
	r95_k_PROTEIN_VEGFSignal 1.000000
	r95_c_PROTEIN_VEGFSignal 1.000000
	r95_k_PROTEIN_Erg 1.000000
	r95_c_PROTEIN_Erg 1.000000
	r95_k_PROTEIN_Alx1 1.000000
	r95_c_PROTEIN_Alx1 1.000000
	r96_k_PROTEIN_GataE 1.000000
	r96_c_PROTEIN_GataE 1.000000
	r97_k_PROTEIN_HesC 1.000000
	r97_c_PROTEIN_HesC 1.000000
	r97_k_PROTEIN_Tgif 1.000000
	r97_c_PROTEIN_Tgif 1.000000
	r97_k_PROTEIN_TBr 1.000000
	r97_c_PROTEIN_TBr 1.000000
	r97_k_PROTEIN_UMANrl 1.000000
	r97_c_PROTEIN_UMANrl 1.000000
	r97_k_PROTEIN_FoxN23 1.000000
	r97_c_PROTEIN_FoxN23 1.000000
	r97_k_PROTEIN_Bra 1.000000
	r97_c_PROTEIN_Bra 1.000000
	r97_k_PROTEIN_GataE 1.000000
	r97_c_PROTEIN_GataE 1.000000
	r98_k_PROTEIN_Bra 1.000000
	r98_c_PROTEIN_Bra 1.000000
	r98_k_PROTEIN_Hox 1.000000
	r98_c_PROTEIN_Hox 1.000000
	r99_k_PROTEIN_UVAOtx 1.000000
	r99_c_PROTEIN_UVAOtx 1.000000
	r99_k_PROTEIN_Otx 1.000000
	r99_c_PROTEIN_Otx 1.000000
	r99_k_PROTEIN_GataE 1.000000
	r99_c_PROTEIN_GataE 1.000000
	r99_k_PROTEIN_Blimp1 1.000000
	r99_c_PROTEIN_Blimp1 1.000000
	r100_k_PROTEIN_Bra 1.000000
	r100_c_PROTEIN_Bra 1.000000
	r100_k_PROTEIN_GataE 1.000000
	r100_c_PROTEIN_GataE 1.000000
	r100_k_PROTEIN_Gcm 1.000000
	r100_c_PROTEIN_Gcm 1.000000
	r101_k_PROTEIN_GroTCF 1.000000
	r101_c_PROTEIN_GroTCF 1.000000
	r101_k_PROTEIN_Otx 1.000000
	r101_c_PROTEIN_Otx 1.000000
	r101_k_PROTEIN_nBTCF 1.000000
	r101_c_PROTEIN_nBTCF 1.000000
	r102_k_PROTEIN_Ets1 1.000000
	r102_c_PROTEIN_Ets1 1.000000
	r102_k_PROTEIN_Hex 1.000000
	r102_c_PROTEIN_Hex 1.000000
	r102_k_PROTEIN_Alx1 1.000000
	r102_c_PROTEIN_Alx1 1.000000
	r102_k_PROTEIN_Dri 1.000000
	r102_c_PROTEIN_Dri 1.000000
	r102_k_PROTEIN_Erg 1.000000
	r102_c_PROTEIN_Erg 1.000000
	r102_k_PROTEIN_Tel 1.000000
	r102_c_PROTEIN_Tel 1.000000
	r102_k_PROTEIN_Hnf6 1.000000
	r102_c_PROTEIN_Hnf6 1.000000
	r103_k_PROTEIN_VEGFSignal 1.000000
	r103_c_PROTEIN_VEGFSignal 1.000000
	r104_k_PROTEIN_Ets1 1.000000
	r104_c_PROTEIN_Ets1 1.000000
	r104_k_PROTEIN_Hex 1.000000
	r104_c_PROTEIN_Hex 1.000000
	r104_k_PROTEIN_Alx1 1.000000
	r104_c_PROTEIN_Alx1 1.000000
	r104_k_PROTEIN_Dri 1.000000
	r104_c_PROTEIN_Dri 1.000000
	r104_k_PROTEIN_Erg 1.000000
	r104_c_PROTEIN_Erg 1.000000
	r104_k_PROTEIN_VEGFSignal 1.000000
	r104_c_PROTEIN_VEGFSignal 1.000000
	r104_k_PROTEIN_Tel 1.000000
	r104_c_PROTEIN_Tel 1.000000
	r104_k_PROTEIN_Hnf6 1.000000
	r104_c_PROTEIN_Hnf6 1.000000
	r105_k_PROTEIN_Hex 1.000000
	r105_c_PROTEIN_Hex 1.000000
	r106_k_PROTEIN_UbiqSoxB1 1.000000
	r106_c_PROTEIN_UbiqSoxB1 1.000000
	r106_k_PROTEIN_SoxB1 1.000000
	r106_c_PROTEIN_SoxB1 1.000000
	r107_k_PROTEIN_SoxC 1.000000
	r107_c_PROTEIN_SoxC 1.000000
	r107_k_PROTEIN_HesC 1.000000
	r107_c_PROTEIN_HesC 1.000000
	r107_k_PROTEIN_UbiqSoxC 1.000000
	r107_c_PROTEIN_UbiqSoxC 1.000000
	r108_k_PROTEIN_GataE 1.000000
	r108_c_PROTEIN_GataE 1.000000
	r108_k_PROTEIN_Gcm 1.000000
	r108_c_PROTEIN_Gcm 1.000000
	r109_k_PROTEIN_Ets1 1.000000
	r109_c_PROTEIN_Ets1 1.000000
	r109_k_PROTEIN_TBr 1.000000
	r109_c_PROTEIN_TBr 1.000000
	r109_k_PROTEIN_HesC 1.000000
	r109_c_PROTEIN_HesC 1.000000
	r110_k_PROTEIN_UbiqTel 1.000000
	r110_c_PROTEIN_UbiqTel 1.000000
	r110_k_PROTEIN_Tel 1.000000
	r110_c_PROTEIN_Tel 1.000000
	r110_k_PROTEIN_HesC 1.000000
	r110_c_PROTEIN_HesC 1.000000
	r111_k_PROTEIN_Ets1 1.000000
	r111_c_PROTEIN_Ets1 1.000000
	r111_k_PROTEIN_Hex 1.000000
	r111_c_PROTEIN_Hex 1.000000
	r111_k_PROTEIN_Erg 1.000000
	r111_c_PROTEIN_Erg 1.000000
	r111_k_PROTEIN_Tgif 1.000000
	r111_c_PROTEIN_Tgif 1.000000
	r112_k_PROTEIN_Hex 1.000000
	r112_c_PROTEIN_Hex 1.000000
	r112_k_PROTEIN_Ets1 1.000000
	r112_c_PROTEIN_Ets1 1.000000
	r112_k_PROTEIN_Dri 1.000000
	r112_c_PROTEIN_Dri 1.000000
	r112_k_PROTEIN_Alx1 1.000000
	r112_c_PROTEIN_Alx1 1.000000
	r113_k_PROTEIN_GroTCF 1.000000
	r113_c_PROTEIN_GroTCF 1.000000
	r113_k_PROTEIN_Blimp1 1.000000
	r113_c_PROTEIN_Blimp1 1.000000
	r113_k_PROTEIN_nBTCF 1.000000
	r113_c_PROTEIN_nBTCF 1.000000
	r114_k_PROTEIN_GroTCF 1.000000
	r114_c_PROTEIN_GroTCF 1.000000
	r114_k_PROTEIN_nBTCF 1.000000
	r114_c_PROTEIN_nBTCF 1.000000
	r114_k_PROTEIN_Hnf6 1.000000
	r114_c_PROTEIN_Hnf6 1.000000
	r115_k_PROTEIN_UbiqAlx1 1.000000
	r115_c_PROTEIN_UbiqAlx1 1.000000
	r115_k_PROTEIN_Ets1 1.000000
	r115_c_PROTEIN_Ets1 1.000000
	r115_k_PROTEIN_Gcm 1.000000
	r115_c_PROTEIN_Gcm 1.000000
	r115_k_PROTEIN_HesC 1.000000
	r115_c_PROTEIN_HesC 1.000000
	r115_k_PROTEIN_Tgif 1.000000
	r115_c_PROTEIN_Tgif 1.000000
	r116_k_PROTEIN_Bra 1.000000
	r116_c_PROTEIN_Bra 1.000000
	r116_k_PROTEIN_Hox 1.000000
	r116_c_PROTEIN_Hox 1.000000
	r117_k_PROTEIN_Blimp1 1.000000
	r117_c_PROTEIN_Blimp1 1.000000
	r117_k_PROTEIN_nBTCF 1.000000
	r117_c_PROTEIN_nBTCF 1.000000
	r117_k_PROTEIN_Brn 1.000000
	r117_c_PROTEIN_Brn 1.000000
	r117_k_PROTEIN_GroTCF 1.000000
	r117_c_PROTEIN_GroTCF 1.000000
	r117_k_PROTEIN_Eve 1.000000
	r117_c_PROTEIN_Eve 1.000000
	r117_k_PROTEIN_Otx 1.000000
	r117_c_PROTEIN_Otx 1.000000
	r117_k_PROTEIN_GataE 1.000000
	r117_c_PROTEIN_GataE 1.000000
	r118_k_PROTEIN_GroTCF 1.000000
	r118_c_PROTEIN_GroTCF 1.000000
	r118_k_PROTEIN_Otx 1.000000
	r118_c_PROTEIN_Otx 1.000000
	r118_k_PROTEIN_GataE 1.000000
	r118_c_PROTEIN_GataE 1.000000
	r118_k_PROTEIN_nBTCF 1.000000
	r118_c_PROTEIN_nBTCF 1.000000
	r119_k_PROTEIN_GataE 1.000000
	r119_c_PROTEIN_GataE 1.000000
	r120_k_PROTEIN_Ets1 1.000000
	r120_c_PROTEIN_Ets1 1.000000
	r120_k_PROTEIN_SoxB1 1.000000
	r120_c_PROTEIN_SoxB1 1.000000
	r120_k_PROTEIN_Dri 1.000000
	r120_c_PROTEIN_Dri 1.000000
	r121_k_PROTEIN_Ets1 1.000000
	r121_c_PROTEIN_Ets1 1.000000
	r121_k_PROTEIN_HesC 1.000000
	r121_c_PROTEIN_HesC 1.000000
	r121_k_PROTEIN_UbiqDelta 1.000000
	r121_c_PROTEIN_UbiqDelta 1.000000
	r121_k_PROTEIN_UMADelta 1.000000
	r121_c_PROTEIN_UMADelta 1.000000
	r122_k_PROTEIN_Gcm 1.000000
	r122_c_PROTEIN_Gcm 1.000000
	r123_k_PROTEIN_Ets1 1.000000
	r123_c_PROTEIN_Ets1 1.000000
	r123_k_PROTEIN_Alx1 1.000000
	r123_c_PROTEIN_Alx1 1.000000
	r124_k_PROTEIN_Otx 1.000000
	r124_c_PROTEIN_Otx 1.000000
	r124_k_PROTEIN_Brn 1.000000
	r124_c_PROTEIN_Brn 1.000000
	r125_k_PROTEIN_Ets1 1.000000
	r125_c_PROTEIN_Ets1 1.000000
	r125_k_PROTEIN_Hex 1.000000
	r125_c_PROTEIN_Hex 1.000000
	r125_k_PROTEIN_TBr 1.000000
	r125_c_PROTEIN_TBr 1.000000
	r126_k_PROTEIN_UbiqEts1 1.000000
	r126_c_PROTEIN_UbiqEts1 1.000000
	r126_k_PROTEIN_HesC 1.000000
	r126_c_PROTEIN_HesC 1.000000
	r127_k_PROTEIN_GroTCF 1.000000
	r127_c_PROTEIN_GroTCF 1.000000
	r127_k_PROTEIN_Blimp1 1.000000
	r127_c_PROTEIN_Blimp1 1.000000
	r127_k_PROTEIN_nBTCF 1.000000
	r127_c_PROTEIN_nBTCF 1.000000
	r127_k_PROTEIN_Hox 1.000000
	r127_c_PROTEIN_Hox 1.000000
	r128_k_PROTEIN_Ets1 1.000000
	r128_c_PROTEIN_Ets1 1.000000
	r128_k_PROTEIN_Hex 1.000000
	r128_c_PROTEIN_Hex 1.000000
	r128_k_PROTEIN_Erg 1.000000
	r128_c_PROTEIN_Erg 1.000000
	r128_k_PROTEIN_Hnf6 1.000000
	r128_c_PROTEIN_Hnf6 1.000000
	r129_k_PROTEIN_GroTFC 1.000000
	r129_c_PROTEIN_GroTFC 1.000000
	r129_k_PROTEIN_FoxA 1.000000
	r129_c_PROTEIN_FoxA 1.000000
	r129_k_PROTEIN_nBTCF 1.000000
	r129_c_PROTEIN_nBTCF 1.000000
	r129_k_PROTEIN_Tgif 1.000000
	r129_c_PROTEIN_Tgif 1.000000
	r129_k_PROTEIN_Bra 1.000000
	r129_c_PROTEIN_Bra 1.000000
	r129_k_PROTEIN_Otx 1.000000
	r129_c_PROTEIN_Otx 1.000000
	r129_k_PROTEIN_GataE 1.000000
	r129_c_PROTEIN_GataE 1.000000
	r130_k_PROTEIN_Ets1 1.000000
	r130_c_PROTEIN_Ets1 1.000000
	r130_k_PROTEIN_Dri 1.000000
	r130_c_PROTEIN_Dri 1.000000
	r130_k_PROTEIN_TBr 1.000000
	r130_c_PROTEIN_TBr 1.000000
	r130_k_PROTEIN_FoxB 1.000000
	r130_c_PROTEIN_FoxB 1.000000
	r130_k_PROTEIN_Alx1 1.000000
	r130_c_PROTEIN_Alx1 1.000000
	r131_k_PROTEIN_nBTCF 1.000000
	r131_c_PROTEIN_nBTCF 1.000000
	r132_k_PROTEIN_Ets1 1.000000
	r132_c_PROTEIN_Ets1 1.000000
	r132_k_PROTEIN_Hex 1.000000
	r132_c_PROTEIN_Hex 1.000000
	r132_k_PROTEIN_Erg 1.000000
	r132_c_PROTEIN_Erg 1.000000
	r132_k_PROTEIN_Tgif 1.000000
	r132_c_PROTEIN_Tgif 1.000000
	r133_k_PROTEIN_GataE 1.000000
	r133_c_PROTEIN_GataE 1.000000
	r133_k_PROTEIN_Gcm 1.000000
	r133_c_PROTEIN_Gcm 1.000000
	r134_k_PROTEIN_GataC 1.000000
	r134_c_PROTEIN_GataC 1.000000
	r134_k_PROTEIN_GCM 1.000000
	r134_c_PROTEIN_GCM 1.000000
	r134_k_PROTEIN_GataE 1.000000
	r134_c_PROTEIN_GataE 1.000000
	r134_k_PROTEIN_Hnf6 1.000000
	r134_c_PROTEIN_Hnf6 1.000000
	r135_k_PROTEIN_Otx 1.000000
	r135_c_PROTEIN_Otx 1.000000
	r135_k_PROTEIN_Hox 1.000000
	r135_c_PROTEIN_Hox 1.000000
	r135_k_PROTEIN_SuHN 1.000000
	r135_c_PROTEIN_SuHN 1.000000
	r136_k_PROTEIN_Snail 1.000000
	r136_c_PROTEIN_Snail 1.000000
	r136_k_PROTEIN_UbiqGcad 1.000000
	r136_c_PROTEIN_UbiqGcad 1.000000
	r137_k_PROTEIN_FoxA 1.000000
	r137_c_PROTEIN_FoxA 1.000000
	r137_k_PROTEIN_nBTCF 1.000000
	r137_c_PROTEIN_nBTCF 1.000000
	r137_k_PROTEIN_Alx1 1.000000
	r137_c_PROTEIN_Alx1 1.000000
	r137_k_PROTEIN_GroTCF 1.000000
	r137_c_PROTEIN_GroTCF 1.000000
	r137_k_PROTEIN_SuHN 1.000000
	r137_c_PROTEIN_SuHN 1.000000
	r137_k_PROTEIN_Gcm 1.000000
	r137_c_PROTEIN_Gcm 1.000000
	r138_k_PROTEIN_Bra 1.000000
	r138_c_PROTEIN_Bra 1.000000
	r139_k_PROTEIN_UbiqHesC 1.000000
	r139_c_PROTEIN_UbiqHesC 1.000000
	r139_k_PROTEIN_Pmar1 1.000000
	r139_c_PROTEIN_Pmar1 1.000000
	r140_k_PROTEIN_Ets1 1.000000
	r140_c_PROTEIN_Ets1 1.000000
	r140_k_PROTEIN_Erg 1.000000
	r140_c_PROTEIN_Erg 1.000000
	r140_k_PROTEIN_Tgif 1.000000
	r140_c_PROTEIN_Tgif 1.000000
	r141_k_PROTEIN_UbiqHnf6 1.000000
	r141_c_PROTEIN_UbiqHnf6 1.000000
	r142_k_PROTEIN_GroTCF 1.000000
	r142_c_PROTEIN_GroTCF 1.000000
	r142_k_PROTEIN_Blimp1 1.000000
	r142_c_PROTEIN_Blimp1 1.000000
	r142_k_PROTEIN_Otx 1.000000
	r142_c_PROTEIN_Otx 1.000000
	r142_k_PROTEIN_Eve 1.000000
	r142_c_PROTEIN_Eve 1.000000
	r142_k_PROTEIN_nBTCF 1.000000
	r142_c_PROTEIN_nBTCF 1.000000
	r143_k_PROTEIN_Bra 1.000000
	r143_c_PROTEIN_Bra 1.000000
	r144_k_PROTEIN_Otx 1.000000
	r144_c_PROTEIN_Otx 1.000000
	r144_k_PROTEIN_GataE 1.000000
	r144_c_PROTEIN_GataE 1.000000
	r145_k_PROTEIN_FoxB 1.000000
	r145_c_PROTEIN_FoxB 1.000000
	r145_k_PROTEIN_Hex 1.000000
	r145_c_PROTEIN_Hex 1.000000
	r145_k_PROTEIN_Alx1 1.000000
	r145_c_PROTEIN_Alx1 1.000000
	r145_k_PROTEIN_Erg 1.000000
	r145_c_PROTEIN_Erg 1.000000
	r145_k_PROTEIN_Ets1 1.000000
	r145_c_PROTEIN_Ets1 1.000000
	r145_k_PROTEIN_TBr 1.000000
	r145_c_PROTEIN_TBr 1.000000
	r145_k_PROTEIN_Hnf6 1.000000
	r145_c_PROTEIN_Hnf6 1.000000
	r146_k_PROTEIN_Hex 1.000000
	r146_c_PROTEIN_Hex 1.000000
	r146_k_PROTEIN_Ets1 1.000000
	r146_c_PROTEIN_Ets1 1.000000
	r146_k_PROTEIN_VEGFSignal 1.000000
	r146_c_PROTEIN_VEGFSignal 1.000000
	r146_k_PROTEIN_Erg 1.000000
	r146_c_PROTEIN_Erg 1.000000
	r146_k_PROTEIN_Alx1 1.000000
	r146_c_PROTEIN_Alx1 1.000000
	r147_k_PROTEIN_GataE 1.000000
	r147_c_PROTEIN_GataE 1.000000
	r148_k_PROTEIN_HesC 1.000000
	r148_c_PROTEIN_HesC 1.000000
	r148_k_PROTEIN_Tgif 1.000000
	r148_c_PROTEIN_Tgif 1.000000
	r148_k_PROTEIN_TBr 1.000000
	r148_c_PROTEIN_TBr 1.000000
	r148_k_PROTEIN_UMANrl 1.000000
	r148_c_PROTEIN_UMANrl 1.000000
	r148_k_PROTEIN_FoxN23 1.000000
	r148_c_PROTEIN_FoxN23 1.000000
	r148_k_PROTEIN_GataE 1.000000
	r148_c_PROTEIN_GataE 1.000000
	r149_k_PROTEIN_Bra 1.000000
	r149_c_PROTEIN_Bra 1.000000
	r149_k_PROTEIN_Hox 1.000000
	r149_c_PROTEIN_Hox 1.000000
	r150_k_PROTEIN_UVAOtx 1.000000
	r150_c_PROTEIN_UVAOtx 1.000000
	r150_k_PROTEIN_Otx 1.000000
	r150_c_PROTEIN_Otx 1.000000
	r150_k_PROTEIN_GataE 1.000000
	r150_c_PROTEIN_GataE 1.000000
	r150_k_PROTEIN_Blimp1 1.000000
	r150_c_PROTEIN_Blimp1 1.000000
	r151_k_PROTEIN_GataE 1.000000
	r151_c_PROTEIN_GataE 1.000000
	r151_k_PROTEIN_Gcm 1.000000
	r151_c_PROTEIN_Gcm 1.000000
	r152_k_PROTEIN_GroTCF 1.000000
	r152_c_PROTEIN_GroTCF 1.000000
	r152_k_PROTEIN_Otx 1.000000
	r152_c_PROTEIN_Otx 1.000000
	r152_k_PROTEIN_nBTCF 1.000000
	r152_c_PROTEIN_nBTCF 1.000000
	r153_k_PROTEIN_Ets1 1.000000
	r153_c_PROTEIN_Ets1 1.000000
	r153_k_PROTEIN_Hex 1.000000
	r153_c_PROTEIN_Hex 1.000000
	r153_k_PROTEIN_Alx1 1.000000
	r153_c_PROTEIN_Alx1 1.000000
	r153_k_PROTEIN_Dri 1.000000
	r153_c_PROTEIN_Dri 1.000000
	r153_k_PROTEIN_Erg 1.000000
	r153_c_PROTEIN_Erg 1.000000
	r153_k_PROTEIN_Tel 1.000000
	r153_c_PROTEIN_Tel 1.000000
	r153_k_PROTEIN_Hnf6 1.000000
	r153_c_PROTEIN_Hnf6 1.000000
	r154_k_PROTEIN_VEGFSignal 1.000000
	r154_c_PROTEIN_VEGFSignal 1.000000
	r155_k_PROTEIN_Ets1 1.000000
	r155_c_PROTEIN_Ets1 1.000000
	r155_k_PROTEIN_Hex 1.000000
	r155_c_PROTEIN_Hex 1.000000
	r155_k_PROTEIN_Alx1 1.000000
	r155_c_PROTEIN_Alx1 1.000000
	r155_k_PROTEIN_Dri 1.000000
	r155_c_PROTEIN_Dri 1.000000
	r155_k_PROTEIN_Erg 1.000000
	r155_c_PROTEIN_Erg 1.000000
	r155_k_PROTEIN_VEGFSignal 1.000000
	r155_c_PROTEIN_VEGFSignal 1.000000
	r155_k_PROTEIN_Tel 1.000000
	r155_c_PROTEIN_Tel 1.000000
	r155_k_PROTEIN_Hnf6 1.000000
	r155_c_PROTEIN_Hnf6 1.000000
	r156_k_PROTEIN_Hex 1.000000
	r156_c_PROTEIN_Hex 1.000000
	r157_k_PROTEIN_UbiqSoxB1 1.000000
	r157_c_PROTEIN_UbiqSoxB1 1.000000
	r157_k_PROTEIN_SoxB1 1.000000
	r157_c_PROTEIN_SoxB1 1.000000
	r158_k_PROTEIN_SoxC 1.000000
	r158_c_PROTEIN_SoxC 1.000000
	r158_k_PROTEIN_HesC 1.000000
	r158_c_PROTEIN_HesC 1.000000
	r158_k_PROTEIN_UbiqSoxC 1.000000
	r158_c_PROTEIN_UbiqSoxC 1.000000
	r159_k_PROTEIN_GataE 1.000000
	r159_c_PROTEIN_GataE 1.000000
	r159_k_PROTEIN_Gcm 1.000000
	r159_c_PROTEIN_Gcm 1.000000
	r160_k_PROTEIN_Ets1 1.000000
	r160_c_PROTEIN_Ets1 1.000000
	r160_k_PROTEIN_TBr 1.000000
	r160_c_PROTEIN_TBr 1.000000
	r160_k_PROTEIN_HesC 1.000000
	r160_c_PROTEIN_HesC 1.000000
	r161_k_PROTEIN_UbiqTel 1.000000
	r161_c_PROTEIN_UbiqTel 1.000000
	r161_k_PROTEIN_Tel 1.000000
	r161_c_PROTEIN_Tel 1.000000
	r161_k_PROTEIN_HesC 1.000000
	r161_c_PROTEIN_HesC 1.000000
	r162_k_PROTEIN_Ets1 1.000000
	r162_c_PROTEIN_Ets1 1.000000
	r162_k_PROTEIN_Hex 1.000000
	r162_c_PROTEIN_Hex 1.000000
	r162_k_PROTEIN_Erg 1.000000
	r162_c_PROTEIN_Erg 1.000000
	r162_k_PROTEIN_Tgif 1.000000
	r162_c_PROTEIN_Tgif 1.000000
	r163_k_PROTEIN_Hex 1.000000
	r163_c_PROTEIN_Hex 1.000000
	r163_k_PROTEIN_Ets1 1.000000
	r163_c_PROTEIN_Ets1 1.000000
	r163_k_PROTEIN_Dri 1.000000
	r163_c_PROTEIN_Dri 1.000000
	r163_k_PROTEIN_Alx1 1.000000
	r163_c_PROTEIN_Alx1 1.000000
	r164_k_PROTEIN_GroTCF 1.000000
	r164_c_PROTEIN_GroTCF 1.000000
	r164_k_PROTEIN_Blimp1 1.000000
	r164_c_PROTEIN_Blimp1 1.000000
	r164_k_PROTEIN_nBTCF 1.000000
	r164_c_PROTEIN_nBTCF 1.000000
	r165_k_PROTEIN_GroTCF 1.000000
	r165_c_PROTEIN_GroTCF 1.000000
	r165_k_PROTEIN_nBTCF 1.000000
	r165_c_PROTEIN_nBTCF 1.000000
	r165_k_PROTEIN_Hnf6 1.000000
	r165_c_PROTEIN_Hnf6 1.000000
	r166_P_Gcad_HillH 8.000000
	r166_P_Gcad_HillK 10.000000
	r166_P_Gcad_theta1 1.000000
	r166_P_Gcad_theta2 20.000000
	r167_P_Notch_HillH 8.000000
	r167_P_Notch_HillK 10.000000
	r167_P_Notch_theta1 1.000000
	r167_P_Notch_theta2 30.000000
	r168_P_Otx_HillK 10.000000
	r168_P_Otx_HillH 8.000000
	r168_P_Otx_theta1 1.000000
	r168_P_Otx_theta2 11.000000
	r169_P_SoxB1_theta1 1.000000
	r169_P_SoxB1_theta2 14.000000
	r169_P_SoxB1_HillK 10.000000
	r169_P_SoxB1_HillH 8.000000
	r170_P_SuH_HillH 8.000000
	r170_P_SuH_HillK 10.000000
	r170_P_SuH_theta1 12.000000
	r170_P_SuH_theta2 30.000000
	r171_P_UMADelta_HillK 10.000000
	r171_P_UMADelta_HillH 8.000000
	r171_P_UMADelta_theta2 30.000000
	r171_P_UMADelta_theta1 19.000000
	r172_P_UMANrl_theta2 30.000000
	r172_P_UMANrl_theta1 24.000000
	r172_P_UMANrl_HillK 10.000000
	r172_P_UMANrl_HillH 8.000000
	r173_P_UMR_HillH 8.000000
	r173_P_UMR_HillK 10.000000
	r173_P_UMR_theta1 15.000000
	r173_P_UMR_theta2 30.000000
	r174_P_UbiqSoxB1_theta2 14.000000
	r174_P_UbiqSoxB1_theta1 1.000000
	r174_P_UbiqSoxB1_HillK 10.000000
	r174_P_UbiqSoxB1_HillH 8.000000
	r175_P_cB_theta1 1.000000
	r175_P_cB_theta2 11.000000
	r175_P_cB_HillH 8.000000
	r175_P_cB_HillK 10.000000
	r176_P_protein_deg 0.300000
	r177_P_protein_deg 0.300000
	r178_P_protein_deg 0.300000
	r179_P_protein_deg 0.300000
	r180_P_protein_deg 0.300000
	r181_P_protein_deg 0.300000
	r182_P_protein_deg 0.300000
	r183_P_activation_k 0.435536
	r184_P_protein_deg 0.300000
	r185_P_inactivation_k 0.840240
	r186_P_protein_deg 0.300000
	r187_P_protein_deg 0.300000
	r188_P_protein_deg 0.300000
	r189_P_protein_deg 0.300000
	r190_P_protein_deg 0.300000
	r191_P_protein_deg 0.300000
	r192_P_protein_deg 0.300000
	r193_P_protein_deg 0.300000
	r194_P_protein_deg 0.300000
	r195_P_protein_deg 0.300000
	r196_P_protein_deg 0.300000
	r197_P_protein_deg 0.300000
	r198_P_protein_deg 0.300000
	r199_P_activation_k 0.358249
	r200_P_inactivation_k 0.060525
	r201_P_protein_deg 0.300000
	r202_P_protein_deg 0.300000
	r203_P_protein_deg 0.300000
	r204_P_protein_deg 0.300000
	r205_P_protein_deg 0.300000
	r206_P_association_k 0.711359
	r207_P_dissociation_k 0.945339
	r208_P_protein_deg 0.300000
	r209_P_protein_deg 0.300000
	r210_P_protein_deg 0.300000
	r211_P_protein_deg 0.300000
	r212_P_protein_deg 0.300000
	r213_P_protein_deg 0.300000
	r214_P_protein_deg 0.300000
	r215_P_protein_deg 0.300000
	r216_P_protein_deg 0.300000
	r217_P_activation_k 0.683877
	r218_P_protein_deg 0.300000
	r219_P_inactivation_k 0.567551
	r220_P_protein_deg 0.300000
	r221_P_protein_deg 0.300000
	r222_P_protein_deg 0.300000
	r223_P_protein_deg 0.300000
	r224_P_protein_deg 0.300000
	r225_P_protein_deg 0.300000
	r226_P_protein_deg 0.300000
	r227_P_protein_deg 0.300000
	r228_P_protein_deg 0.300000
	r229_P_protein_deg 0.300000
	r230_P_protein_deg 0.300000
	r231_P_association_k 0.727293
	r232_P_dissociation_k 0.051451
	r233_P_protein_deg 0.300000
	r234_P_protein_deg 0.300000
	r235_P_protein_deg 0.300000
	r236_P_protein_deg 0.300000
	r237_P_protein_deg 0.300000
	r238_P_protein_deg 0.300000
	r239_P_protein_deg 0.300000
	r240_P_protein_deg 0.300000
	r241_P_protein_deg 0.300000
	r242_P_association_k 0.362234
	r243_P_dissociation_k 0.588675
	r244_P_protein_deg 0.300000
	r245_P_protein_deg 0.300000
	r246_P_adeg_k 0.882551
	r247_P_protein_deg 0.300000
	r248_P_activation_k 0.851148
	r249_P_inactivation_k 0.190932
	r250_P_association_k 0.329070
	r251_P_dissociation_k 0.381606
	r252_P_protein_deg 0.300000
	r253_P_protein_deg 0.300000
	r254_P_protein_deg 0.300000
	r255_P_protein_deg 0.300000
	r256_P_protein_deg 0.300000
	r257_P_protein_deg 0.300000
	r258_P_protein_deg 0.300000
	r259_P_protein_deg 0.300000
	r260_P_activation_k 0.435536
	r261_P_protein_deg 0.300000
	r262_P_inactivation_k 0.840240
	r263_P_protein_deg 0.300000
	r264_P_protein_deg 0.300000
	r265_P_protein_deg 0.300000
	r266_P_protein_deg 0.300000
	r267_P_protein_deg 0.300000
	r268_P_protein_deg 0.300000
	r269_P_protein_deg 0.300000
	r270_P_protein_deg 0.300000
	r271_P_protein_deg 0.300000
	r272_P_protein_deg 0.300000
	r273_P_protein_deg 0.300000
	r274_P_protein_deg 0.300000
	r275_P_activation_k 0.358249
	r276_P_inactivation_k 0.060525
	r277_P_protein_deg 0.300000
	r278_P_protein_deg 0.300000
	r279_P_protein_deg 0.300000
	r280_P_protein_deg 0.300000
	r281_P_protein_deg 0.300000
	r282_P_association_k 0.711359
	r283_P_dissociation_k 0.945339
	r284_P_protein_deg 0.300000
	r285_P_protein_deg 0.300000
	r286_P_protein_deg 0.300000
	r287_P_protein_deg 0.300000
	r288_P_protein_deg 0.300000
	r289_P_protein_deg 0.300000
	r290_P_protein_deg 0.300000
	r291_P_protein_deg 0.300000
	r292_P_protein_deg 0.300000
	r293_P_activation_k 0.683877
	r294_P_protein_deg 0.300000
	r295_P_inactivation_k 0.567551
	r296_P_protein_deg 0.300000
	r297_P_protein_deg 0.300000
	r298_P_protein_deg 0.300000
	r299_P_protein_deg 0.300000
	r300_P_protein_deg 0.300000
	r301_P_protein_deg 0.300000
	r302_P_protein_deg 0.300000
	r303_P_protein_deg 0.300000
	r304_P_protein_deg 0.300000
	r305_P_protein_deg 0.300000
	r306_P_protein_deg 0.300000
	r307_P_association_k 0.727293
	r308_P_dissociation_k 0.051451
	r309_P_protein_deg 0.300000
	r310_P_protein_deg 0.300000
	r311_P_protein_deg 0.300000
	r312_P_protein_deg 0.300000
	r313_P_protein_deg 0.300000
	r314_P_protein_deg 0.300000
	r315_P_protein_deg 0.300000
	r316_P_protein_deg 0.300000
	r317_P_protein_deg 0.300000
	r318_P_protein_deg 0.300000
	r319_P_association_k 0.362234
	r320_P_dissociation_k 0.588675
	r321_P_protein_deg 0.300000
	r322_P_adeg_k 0.882551
	r323_P_protein_deg 0.300000
	r324_P_activation_k 0.851148
	r325_P_inactivation_k 0.190932
	r326_P_association_k 0.329070
	r327_P_dissociation_k 0.381606
	r328_P_protein_deg 0.300000
	r329_P_protein_deg 0.300000
	r330_P_protein_deg 0.300000
	r331_P_protein_deg 0.300000
	r332_P_protein_deg 0.300000
	r333_P_protein_deg 0.300000
	r334_P_protein_deg 0.300000
	r335_P_protein_deg 0.300000
	r336_P_activation_k 0.435536
	r337_P_protein_deg 0.300000
	r338_P_inactivation_k 0.840240
	r339_P_protein_deg 0.300000
	r340_P_protein_deg 0.300000
	r341_P_protein_deg 0.300000
	r342_P_protein_deg 0.300000
	r343_P_protein_deg 0.300000
	r344_P_protein_deg 0.300000
	r345_P_protein_deg 0.300000
	r346_P_protein_deg 0.300000
	r347_P_protein_deg 0.300000
	r348_P_protein_deg 0.300000
	r349_P_protein_deg 0.300000
	r350_P_protein_deg 0.300000
	r351_P_activation_k 0.358249
	r352_P_inactivation_k 0.060525
	r353_P_protein_deg 0.300000
	r354_P_protein_deg 0.300000
	r355_P_protein_deg 0.300000
	r356_P_protein_deg 0.300000
	r357_P_protein_deg 0.300000
	r358_P_association_k 0.711359
	r359_P_dissociation_k 0.945339
	r360_P_protein_deg 0.300000
	r361_P_protein_deg 0.300000
	r362_P_protein_deg 0.300000
	r363_P_protein_deg 0.300000
	r364_P_protein_deg 0.300000
	r365_P_protein_deg 0.300000
	r366_P_protein_deg 0.300000
	r367_P_protein_deg 0.300000
	r368_P_protein_deg 0.300000
	r369_P_protein_deg 0.300000
	r370_P_activation_k 0.683877
	r371_P_inactivation_k 0.567551
	r372_P_protein_deg 0.300000
	r373_P_protein_deg 0.300000
	r374_P_protein_deg 0.300000
	r375_P_protein_deg 0.300000
	r376_P_protein_deg 0.300000
	r377_P_protein_deg 0.300000
	r378_P_protein_deg 0.300000
	r379_P_protein_deg 0.300000
	r380_P_protein_deg 0.300000
	r381_P_protein_deg 0.300000
	r382_P_protein_deg 0.300000
	r383_P_association_k 0.727293
	r384_P_dissociation_k 0.051451
	r385_P_protein_deg 0.300000
	r386_P_protein_deg 0.300000
	r387_P_protein_deg 0.300000
	r388_P_protein_deg 0.300000
	r389_P_protein_deg 0.300000
	r390_P_protein_deg 0.300000
	r391_P_protein_deg 0.300000
	r392_P_protein_deg 0.300000
	r393_P_protein_deg 0.300000
	r394_P_protein_deg 0.300000
	r395_P_protein_deg 0.300000
	r396_P_protein_deg 0.300000
	r397_P_association_k 0.362234
	r398_P_dissociation_k 0.588675
	r399_P_protein_deg 0.300000
	r400_P_adeg_k 0.882551
	r401_P_protein_deg 0.300000
	r402_P_activation_k 0.851148
	r403_P_inactivation_k 0.190932
	r404_P_association_k 0.329070
	r405_P_dissociation_k 0.381606
	r406_P_protein_deg 0.300000
	r407_P_Ets1_theta2 11.000000
	r407_P_Ets1_theta1 1.000000
	r407_P_Ets1_HillK 10.000000
	r407_P_Ets1_HillH 8.000000
	r408_P_Gcad_HillH 8.000000
	r408_P_Gcad_HillK 10.000000
	r408_P_Gcad_theta1 1.000000
	r408_P_Gcad_theta2 20.000000
	r409_P_L1_theta2 30.000000
	r409_P_L1_theta1 21.000000
	r409_P_L1_HillK 10.000000
	r409_P_L1_HillH 8.000000
	r410_P_Otx_HillK 10.000000
	r410_P_Otx_HillH 8.000000
	r410_P_Otx_theta1 1.000000
	r410_P_Otx_theta2 15.000000
	r411_P_UbiqAlx1_theta1 1.000000
	r411_P_UbiqAlx1_theta2 30.000000
	r411_P_UbiqAlx1_HillH 8.000000
	r411_P_UbiqAlx1_HillK 10.000000
	r412_P_UbiqES_theta1 1.000000
	r412_P_UbiqES_theta2 20.000000
	r412_P_UbiqES_HillH 8.000000
	r412_P_UbiqES_HillK 10.000000
	r413_P_UbiqEts1_theta2 30.000000
	r413_P_UbiqEts1_theta1 1.000000
	r413_P_UbiqEts1_HillH 8.000000
	r413_P_UbiqEts1_HillK 10.000000
	r414_P_UbiqHesC_theta2 8.000000
	r414_P_UbiqHesC_theta1 1.000000
	r414_P_UbiqHesC_HillH 8.000000
	r414_P_UbiqHesC_HillK 10.000000
	r415_P_UbiqHnf6_theta1 1.000000
	r415_P_UbiqHnf6_theta2 23.000000
	r415_P_UbiqHnf6_HillH 8.000000
	r415_P_UbiqHnf6_HillK 10.000000
	r416_P_UbiqSoxC_theta1 1.000000
	r416_P_UbiqSoxC_theta2 17.000000
	r416_P_UbiqSoxC_HillK 10.000000
	r416_P_UbiqSoxC_HillH 8.000000
	r417_P_UbiqTel_HillK 10.000000
	r417_P_UbiqTel_HillH 8.000000
	r417_P_UbiqTel_theta2 29.000000
	r417_P_UbiqTel_theta1 1.000000
	r418_P_cB_theta1 1.000000
	r418_P_cB_theta2 14.000000
	r418_P_cB_HillH 8.000000
	r418_P_cB_HillK 10.000000
	r419_P_mRNA_deg 0.119000
	r420_P_k_translation 2.000000
	r421_P_mRNA_deg 0.119000
	r422_P_k_translation 2.000000
	r423_P_mRNA_deg 0.119000
	r424_P_k_translation 2.000000
	r425_P_mRNA_deg 0.119000
	r426_P_k_translation 2.000000
	r427_P_mRNA_deg 0.119000
	r428_P_k_translation 2.000000
	r429_P_mRNA_deg 0.119000
	r430_P_k_translation 2.000000
	r431_P_mRNA_deg 0.119000
	r432_P_k_translation 2.000000
	r433_P_mRNA_deg 0.119000
	r434_P_k_translation 2.000000
	r435_P_mRNA_deg 0.119000
	r436_P_k_translation 2.000000
	r437_P_mRNA_deg 0.119000
	r438_P_k_translation 2.000000
	r439_P_mRNA_deg 0.119000
	r440_P_k_translation 2.000000
	r441_P_mRNA_deg 0.119000
	r442_P_k_translation 2.000000
	r443_P_mRNA_deg 0.119000
	r444_P_k_translation 2.000000
	r445_P_mRNA_deg 0.119000
	r446_P_k_translation 2.000000
	r447_P_mRNA_deg 0.119000
	r448_P_k_translation 2.000000
	r449_P_mRNA_deg 0.119000
	r450_P_k_translation 2.000000
	r451_P_mRNA_deg 0.119000
	r452_P_k_translation 2.000000
	r453_P_mRNA_deg 0.119000
	r454_P_k_translation 2.000000
	r455_P_mRNA_deg 0.119000
	r456_P_k_translation 2.000000
	r457_P_mRNA_deg 0.119000
	r458_P_k_translation 2.000000
	r459_P_mRNA_deg 0.119000
	r460_P_k_translation 2.000000
	r461_P_mRNA_deg 0.119000
	r462_P_k_translation 2.000000
	r463_P_mRNA_deg 0.119000
	r464_P_k_translation 2.000000
	r465_P_mRNA_deg 0.119000
	r466_P_k_translation 2.000000
	r467_P_mRNA_deg 0.119000
	r468_P_k_translation 2.000000
	r469_P_mRNA_deg 0.119000
	r470_P_k_translation 2.000000
	r471_P_mRNA_deg 0.119000
	r472_P_k_translation 2.000000
	r473_P_mRNA_deg 0.119000
	r474_P_k_translation 2.000000
	r475_P_mRNA_deg 0.119000
	r476_P_k_translation 2.000000
	r477_P_mRNA_deg 0.119000
	r478_P_k_translation 2.000000
	r479_P_mRNA_deg 0.119000
	r480_P_k_translation 2.000000
	r481_P_mRNA_deg 0.119000
	r482_P_k_translation 2.000000
	r483_P_mRNA_deg 0.119000
	r484_P_k_translation 2.000000
	r485_P_mRNA_deg 0.119000
	r486_P_k_translation 2.000000
	r487_P_mRNA_deg 0.119000
	r488_P_k_translation 2.000000
	r489_P_mRNA_deg 0.119000
	r490_P_k_translation 2.000000
	r491_P_mRNA_deg 0.119000
	r492_P_k_translation 2.000000
	r493_P_mRNA_deg 0.119000
	r494_P_k_translation 2.000000
	r495_P_mRNA_deg 0.119000
	r496_P_k_translation 2.000000
	r497_P_mRNA_deg 0.119000
	r498_P_k_translation 2.000000
	r499_P_mRNA_deg 0.119000
	r500_P_k_translation 2.000000
	r501_P_mRNA_deg 0.119000
	r502_P_k_translation 2.000000
	r503_P_mRNA_deg 0.119000
	r504_P_k_translation 2.000000
	r505_P_mRNA_deg 0.119000
	r506_P_k_translation 2.000000
	r507_P_mRNA_deg 0.119000
	r508_P_k_translation 2.000000
	r509_P_mRNA_deg 0.119000
	r510_P_k_translation 2.000000
	r511_P_mRNA_deg 0.119000
	r512_P_k_translation 2.000000
	r513_P_mRNA_deg 0.119000
	r514_P_k_translation 2.000000
	r515_P_mRNA_deg 0.119000
	r516_P_k_translation 2.000000
	r517_P_mRNA_deg 0.119000
	r518_P_k_translation 2.000000
	r519_P_mRNA_deg 0.119000
	r520_P_k_translation 2.000000
	r521_P_mRNA_deg 0.119000
	r522_P_k_translation 2.000000
	r523_P_mRNA_deg 0.119000
	r524_P_k_translation 2.000000
	r525_P_mRNA_deg 0.119000
	r526_P_k_translation 2.000000
	r527_P_mRNA_deg 0.119000
	r528_P_k_translation 2.000000
	r529_P_mRNA_deg 0.119000
	r530_P_k_translation 2.000000
	r531_P_mRNA_deg 0.119000
	r532_P_k_translation 2.000000
	r533_P_mRNA_deg 0.119000
	r534_P_k_translation 2.000000
	r535_P_mRNA_deg 0.119000
	r536_P_k_translation 2.000000
	r537_P_mRNA_deg 0.119000
	r538_P_k_translation 2.000000
	r539_P_mRNA_deg 0.119000
	r540_P_k_translation 2.000000
	r541_P_mRNA_deg 0.119000
	r542_P_k_translation 2.000000
	r543_P_mRNA_deg 0.119000
	r544_P_k_translation 2.000000
	r545_P_mRNA_deg 0.119000
	r546_P_k_translation 2.000000
	r547_P_mRNA_deg 0.119000
	r548_P_k_translation 2.000000
	r549_P_mRNA_deg 0.119000
	r550_P_k_translation 2.000000
	r551_P_mRNA_deg 0.119000
	r552_P_k_translation 2.000000
	r553_P_mRNA_deg 0.119000
	r554_P_k_translation 2.000000
	r555_P_mRNA_deg 0.119000
	r556_P_k_translation 2.000000
	r557_P_mRNA_deg 0.119000
	r558_P_k_translation 2.000000
	r559_P_mRNA_deg 0.119000
	r560_P_k_translation 2.000000
	r561_P_mRNA_deg 0.119000
	r562_P_k_translation 2.000000
	r563_P_mRNA_deg 0.119000
	r564_P_k_translation 2.000000
	r565_P_mRNA_deg 0.119000
	r566_P_k_translation 2.000000
	r567_P_mRNA_deg 0.119000
	r568_P_k_translation 2.000000
	r569_P_mRNA_deg 0.119000
	r570_P_k_translation 2.000000
	r571_P_mRNA_deg 0.119000
	r572_P_k_translation 2.000000
	r573_P_mRNA_deg 0.119000
	r574_P_k_translation 2.000000
	r575_P_mRNA_deg 0.119000
	r576_P_k_translation 2.000000
	r577_P_mRNA_deg 0.119000
	r578_P_k_translation 2.000000
	r579_P_mRNA_deg 0.119000
	r580_P_k_translation 2.000000
	r581_P_mRNA_deg 0.119000
	r582_P_k_translation 2.000000
	r583_P_mRNA_deg 0.119000
	r584_P_k_translation 2.000000
	r585_P_mRNA_deg 0.119000
	r586_P_k_translation 2.000000
	r587_P_mRNA_deg 0.119000
	r588_P_k_translation 2.000000
	r589_P_mRNA_deg 0.119000
	r590_P_k_translation 2.000000
	r591_P_mRNA_deg 0.119000
	r592_P_k_translation 2.000000
	r593_P_mRNA_deg 0.119000
	r594_P_k_translation 2.000000
	r595_P_mRNA_deg 0.119000
	r596_P_k_translation 2.000000
	r597_P_mRNA_deg 0.119000
	r598_P_k_translation 2.000000
	r599_P_mRNA_deg 0.119000
	r600_P_k_translation 2.000000
	r601_P_mRNA_deg 0.119000
	r602_P_k_translation 2.000000
	r603_P_mRNA_deg 0.119000
	r604_P_k_translation 2.000000
	r605_P_mRNA_deg 0.119000
	r606_P_k_translation 2.000000
	r607_P_mRNA_deg 0.119000
	r608_P_k_translation 2.000000
	r609_P_mRNA_deg 0.119000
	r610_P_k_translation 2.000000
	r611_P_mRNA_deg 0.119000
	r612_P_k_translation 2.000000
	r613_P_mRNA_deg 0.119000
	r614_P_k_translation 2.000000
	r615_P_mRNA_deg 0.119000
	r616_P_k_translation 2.000000
	r617_P_mRNA_deg 0.119000
	r618_P_k_translation 2.000000
	r619_P_mRNA_deg 0.119000
	r620_P_k_translation 2.000000
	r621_P_mRNA_deg 0.119000
	r622_P_k_translation 2.000000
	r623_P_mRNA_deg 0.119000
	r624_P_k_translation 2.000000
	r625_P_mRNA_deg 0.119000
	r626_P_k_translation 2.000000
	r627_P_mRNA_deg 0.119000
	r628_P_k_translation 2.000000
	r629_P_mRNA_deg 0.119000
	r630_P_k_translation 2.000000
	r631_P_mRNA_deg 0.119000
	r632_P_k_translation 2.000000
	r633_P_mRNA_deg 0.119000
	r634_P_k_translation 2.000000
	r635_P_mRNA_deg 0.119000
	r636_P_k_translation 2.000000
	r637_P_mRNA_deg 0.119000
	r638_P_k_translation 2.000000
	r639_P_mRNA_deg 0.119000
	r640_P_k_translation 2.000000
	r641_P_mRNA_deg 0.119000
	r642_P_k_translation 2.000000
	r643_P_mRNA_deg 0.119000
	r644_P_k_translation 2.000000
	r645_P_mRNA_deg 0.119000
	r646_P_k_translation 2.000000
	r647_P_mRNA_deg 0.119000
	r648_P_k_translation 2.000000
	r649_P_mRNA_deg 0.119000
	r650_P_k_translation 2.000000
	r651_P_mRNA_deg 0.119000
	r652_P_k_translation 2.000000
	r653_P_mRNA_deg 0.119000
	r654_P_k_translation 2.000000
	r655_P_mRNA_deg 0.119000
	r656_P_k_translation 2.000000
	r657_P_mRNA_deg 0.119000
	r658_P_k_translation 2.000000
	r659_P_mRNA_deg 0.119000
	r660_P_k_translation 2.000000
	r661_P_mRNA_deg 0.119000
	r662_P_k_translation 2.000000
	r663_P_mRNA_deg 0.119000
	r664_P_k_translation 2.000000
	r665_P_mRNA_deg 0.119000
	r666_P_k_translation 2.000000
	r667_P_mRNA_deg 0.119000
	r668_P_k_translation 2.000000
	r669_P_mRNA_deg 0.119000
	r670_P_k_translation 2.000000
	r671_P_mRNA_deg 0.119000
	r672_P_k_translation 2.000000
	r673_P_mRNA_deg 0.119000
	r674_P_k_translation 2.000000
	r675_P_mRNA_deg 0.119000
	r676_P_k_translation 2.000000
	r677_P_mRNA_deg 0.119000
	r678_P_k_translation 2.000000
	r679_P_mRNA_deg 0.119000
	r680_P_k_translation 2.000000
	r681_P_mRNA_deg 0.119000
	r682_P_k_translation 2.000000
	r683_P_mRNA_deg 0.119000
	r684_P_k_translation 2.000000
	r685_P_mRNA_deg 0.119000
	r686_P_k_translation 2.000000
	r687_P_mRNA_deg 0.119000
	r688_P_k_translation 2.000000
	r689_P_mRNA_deg 0.119000
	r690_P_k_translation 2.000000
	r691_P_mRNA_deg 0.119000
	r692_P_k_translation 2.000000
	r693_P_mRNA_deg 0.119000
	r694_P_k_translation 2.000000
	r695_P_mRNA_deg 0.119000
	r696_P_k_translation 2.000000
	r697_P_mRNA_deg 0.119000
	r698_P_k_translation 2.000000
	r699_P_mRNA_deg 0.119000
	r700_P_k_translation 2.000000
	r701_P_mRNA_deg 0.119000
	r702_P_k_translation 2.000000
	r703_P_mRNA_deg 0.119000
	r704_P_k_translation 2.000000
	r705_P_mRNA_deg 0.119000
	r706_P_k_translation 2.000000
	r707_P_mRNA_deg 0.119000
	r708_P_k_translation 2.000000
	r709_P_mRNA_deg 0.119000
	r710_P_k_translation 2.000000
	r711_P_mRNA_deg 0.119000
	r712_P_k_translation 2.000000
	r713_P_mRNA_deg 0.119000
	r714_P_k_translation 2.000000
	r715_P_mRNA_deg 0.119000
	r716_P_k_translation 2.000000
	r717_P_mRNA_deg 0.119000
	r718_P_k_translation 2.000000
	r719_P_mRNA_deg 0.119000
	r720_P_k_translation 2.000000
	r721_P_mRNA_deg 0.119000
	r722_P_k_translation 2.000000
	r723_P_mRNA_deg 0.119000
	r724_P_k_translation 2.000000
	r725_P_mRNA_deg 0.119000
	r726_P_k_translation 2.000000
	r727_P_mRNA_deg 0.119000
	r728_P_k_translation 2.000000
	r729_P_mRNA_deg 0.119000
	r730_P_k_translation 2.000000
	r731_P_mRNA_deg 0.119000
	r732_P_k_translation 2.000000
	r733_P_mRNA_deg 0.119000
	r734_P_k_translation 2.000000
	r735_P_mRNA_deg 0.119000
	r736_P_k_translation 2.000000
	r737_P_mRNA_deg 0.119000
	r738_P_k_translation 2.000000
	r739_P_mRNA_deg 0.119000
	r740_P_k_translation 2.000000
	r741_P_mRNA_deg 0.119000
	r742_P_k_translation 2.000000
	r743_P_mRNA_deg 0.119000
	r744_P_k_translation 2.000000
	r745_P_mRNA_deg 0.119000
	r746_P_k_translation 2.000000
	r747_P_mRNA_deg 0.119000
	r748_P_k_translation 2.000000
	r749_P_mRNA_deg 0.119000
	r750_P_k_translation 2.000000
	r751_P_mRNA_deg 0.119000
	r752_P_k_translation 2.000000
	r753_P_mRNA_deg 0.119000
	r754_P_k_translation 2.000000
	r755_P_mRNA_deg 0.119000
	r756_P_k_translation 2.000000
	r757_P_mRNA_deg 0.119000
	r758_P_k_translation 2.000000
	r759_P_mRNA_deg 0.119000
	r760_P_k_translation 2.000000
	r761_P_mRNA_deg 0.119000
	r762_P_k_translation 2.000000
	r763_P_mRNA_deg 0.119000
	r764_P_k_translation 2.000000
	r765_P_mRNA_deg 0.119000
	r766_P_k_translation 2.000000
	r767_P_mRNA_deg 0.119000
	r768_P_k_translation 2.000000
	r769_P_mRNA_deg 0.119000
	r770_P_k_translation 2.000000
	r771_P_mRNA_deg 0.119000
	r772_P_k_translation 2.000000
	r773_P_mRNA_deg 0.119000
	r774_P_k_translation 2.000000
	r775_P_mRNA_deg 0.119000
	r776_P_k_translation 2.000000
	r777_P_mRNA_deg 0.119000
	r778_P_k_translation 2.000000
end parameters
begin compartments
	#volume units: L
	default 3 1.0
	Compartment__outside 3 1.0 #Compartment.outside
	Compartment__cell 3 1.0 #cell
end compartments
begin molecule types
	GENE_E_z13()
	PROTEIN_M_Bra()
	mRNA_P_UbiqES()
	mRNA_M_Gcm()
	PROTEIN_E_SuH()
	GENE_M_Hox()
	PROTEIN_M_SuH()
	PROTEIN_P_UbiqTel()
	PROTEIN_E_VEGFSignal()
	GENE_P_FoxA()
	GENE_P_Hex()
	PROTEIN_M_Hnf6()
	PROTEIN_P_Notch()
	PROTEIN_M_Dpt()
	mRNA_P_CAPK()
	GENE_M_Msp130()
	GENE_P_Erg()
	mRNA_P_Gcad()
	PROTEIN_M_Pmar1()
	PROTEIN_M_Eve()
	mRNA_P_FoxO()
	GENE_M_GataC()
	mRNA_P_FoxA()
	PROTEIN_M_FoxB()
	PRE_M_UbiqSoxB1()
	PROTEIN_E_Otx()
	PROTEIN_P_Pmar1()
	mRNA_P_Sm27()
	mRNA_P_MspL()
	PRE_P_Otx()
	PROTEIN_M_Apobec()
	mRNA_E_GataE()
	PROTEIN_E_Dri()
	PROTEIN_M_cB()
	mRNA_M_GataE()
	GENE_E_MspL()
	GENE_M_CyP()
	GENE_M_SuTx()
	PROTEIN_M_Gcad()
	GENE_E_SuTx()
	GENE_P_Dpt()
	PROTEIN_M_Delta2()
	mRNA_E_MspL()
	mRNA_P_Dpt()
	PROTEIN_E_UMR()
	mRNA_P_Kakapo()
	PROTEIN_E_Notch()
	mRNA_M_Kakapo()
	mRNA_M_VEGFR()
	GENE_E_Lim()
	PROTEIN_E_Ficolin()
	PROTEIN_M_Brn()
	PROTEIN_P_GataC()
	GENE_P_Msp130()
	GENE_E_GataE()
	PROTEIN_E_ES()
	PROTEIN_M_Kakapo()
	mRNA_E_Endo16()
	mRNA_E_Hex()
	mRNA_E_Gelsolin()
	PROTEIN_E_CyP()
	PROTEIN_E_MspL()
	mRNA_P_SoxC()
	GENE_E_GataC()
	GENE_E_HesC()
	PROTEIN_E_UbiqSoxB1()
	mRNA_E_VEGF()
	PROTEIN_E_Pks()
	PROTEIN_M_Snail()
	PROTEIN_E_Dpt()
	GENE_P_Ets1()
	mRNA_M_Wnt8()
	mRNA_E_Sm50()
	PROTEIN_E_FoxB()
	PROTEIN_P_Delta()
	PROTEIN_P_nBTCF()
	mRNA_P_Wnt8()
	GENE_M_Pks()
	mRNA_P_UbiqAlx1()
	mRNA_E_GataC()
	mRNA_P_UbiqSoxC()
	mRNA_E_Sm27()
	mRNA_E_SuTx()
	mRNA_M_Sm30()
	PROTEIN_E_SuHN()
	mRNA_M_Endo16()
	PROTEIN_P_Nrl()
	PRE_P_UbiqSoxC()
	PROTEIN_E_Gcad()
	GENE_M_Delta()
	GENE_P_Kakapo()
	mRNA_E_Notch()
	mRNA_M_FoxA()
	GENE_E_Apobec()
	PROTEIN_P_FvMo()
	mRNA_P_Brn()
	mRNA_P_Not()
	mRNA_E_ES()
	GENE_M_Dri()
	GENE_P_Gcad()
	PROTEIN_P_Lim()
	GENE_P_Snail()
	mRNA_M_SoxB1()
	PROTEIN_P_Bra()
	mRNA_P_FvMo()
	PROTEIN_M_Hox()
	PROTEIN_E_Brn()
	PROTEIN_E_FoxA()
	GENE_P_Pks()
	GENE_M_Eve()
	PROTEIN_P_Wnt8()
	mRNA_E_SoxC()
	mRNA_P_Eve()
	mRNA_P_Pmar1()
	PROTEIN_M_Sm30()
	mRNA_M_HesC()
	mRNA_E_UVAOtx()
	PROTEIN_M_FvMo()
	mRNA_P_Pks()
	PROTEIN_P_Apobec()
	PROTEIN_E_frizzled_a()
	mRNA_M_Otx()
	mRNA_E_cB()
	PROTEIN_E_Blimp1()
	PROTEIN_E_Msp130()
	mRNA_E_Erg()
	PROTEIN_P_Tel()
	PROTEIN_M_Otx()
	GENE_M_Alx1()
	GENE_P_Tel()
	GENE_M_MspL()
	PROTEIN_E_Alx1()
	mRNA_P_FoxN23()
	PROTEIN_P_L1()
	mRNA_P_Lim()
	PROTEIN_E_Endo16()
	GENE_E_Ficolin()
	mRNA_M_SuH()
	GENE_M_Gcad()
	PROTEIN_M_Tgif()
	PROTEIN_P_Hnf6()
	GENE_E_Hnf6()
	GENE_M_Sm27()
	PROTEIN_E_Delta()
	mRNA_P_CyP()
	GENE_P_GataC()
	PROTEIN_M_SuTx()
	PROTEIN_P_UbiqSoxC()
	GENE_M_OrCt()
	mRNA_M_Pks()
	mRNA_E_Gcad()
	GENE_E_Sm27()
	GENE_E_Tgif()
	GENE_P_VEGFR()
	PROTEIN_M_L1()
	GENE_E_Not()
	mRNA_E_Hox()
	GENE_M_TBr()
	PROTEIN_P_FoxO()
	mRNA_P_Dri()
	PROTEIN_M_frizzled_a()
	GENE_M_Endo16()
	PROTEIN_E_frizzled_i()
	GENE_P_Gelsolin()
	GENE_M_Blimp1()
	mRNA_P_Blimp1()
	mRNA_E_Dri()
	GENE_M_FoxO()
	PROTEIN_E_SoxB1()
	GENE_E_VEGFR()
	mRNA_M_FoxB()
	GENE_P_Pmar1()
	PROTEIN_E_Notch2()
	PROTEIN_P_frizzled_i()
	GENE_P_Hox()
	PROTEIN_M_SoxB1()
	GENE_E_Gcad()
	GENE_P_Alx1()
	PROTEIN_M_GataE()
	GENE_E_Bra()
	GENE_M_Otx()
	PROTEIN_E_Sm30()
	mRNA_E_Snail()
	PROTEIN_P_Kakapo()
	PRE_E_SoxB1()
	GENE_E_ES()
	PROTEIN_P_Hex()
	PROTEIN_M_GSK3_a()
	GENE_P_Wnt8()
	PRE_M_Notch()
	GENE_M_Dpt()
	GENE_P_HesC()
	GENE_P_Sm27()
	mRNA_P_Apobec()
	PRE_E_Otx()
	mRNA_M_Tgif()
	GENE_P_Sm50()
	mRNA_E_Lim()
	GENE_M_FvMo()
	mRNA_M_Sm50()
	mRNA_P_GataC()
	PRE_P_UbiqAlx1()
	GENE_M_Bra()
	GENE_M_Gelsolin()
	PROTEIN_P_OrCt()
	GENE_M_VEGFR()
	GENE_P_GataE()
	GENE_P_Nrl()
	GENE_P_Gcm()
	mRNA_E_Tel()
	PRE_P_UbiqHesC()
	PROTEIN_M_CAPK()
	mRNA_E_FoxN23()
	mRNA_P_Ficolin()
	PROTEIN_M_TCF()
	mRNA_P_TBr()
	mRNA_M_Ficolin()
	PROTEIN_M_Tel()
	PROTEIN_E_Kakapo()
	mRNA_E_Msp130()
	mRNA_P_OrCt()
	PRE_P_UbiqEts1()
	mRNA_P_VEGFR()
	PROTEIN_E_Delta2()
	PROTEIN_P_Gro()
	PROTEIN_M_UMANrl()
	PROTEIN_P_Otx()
	mRNA_M_TBr()
	GENE_M_FoxA()
	PROTEIN_M_Gro()
	mRNA_E_CyP()
	mRNA_P_cB()
	PROTEIN_P_TCF()
	PROTEIN_P_frizzled_a()
	PROTEIN_M_GSK3_i()
	none()
	PROTEIN_M_Blimp1()
	mRNA_P_HesC()
	PROTEIN_P_z13()
	PROTEIN_M_MspL()
	PROTEIN_P_TBr()
	mRNA_M_Alx1()
	mRNA_M_z13()
	PROTEIN_E_VEGFR()
	PROTEIN_E_Gro()
	mRNA_E_UMR()
	mRNA_P_Delta()
	GENE_E_FoxN23()
	mRNA_E_SuH()
	mRNA_M_Nrl()
	mRNA_P_SoxB1()
	mRNA_P_Alx1()
	GENE_E_Hox()
	GENE_E_Erg()
	mRNA_P_Msp130()
	mRNA_M_FvMo()
	PROTEIN_M_TBr()
	PROTEIN_M_UMR()
	mRNA_M_UMR()
	mRNA_P_Erg()
	PROTEIN_E_CAPK()
	PROTEIN_E_FvMo()
	GENE_M_SoxB1()
	PROTEIN_E_GataE()
	GENE_M_Lim()
	PROTEIN_M_HesC()
	mRNA_P_Hox()
	PROTEIN_E_Erg()
	PROTEIN_E_Sm27()
	PROTEIN_P_Dpt()
	PROTEIN_P_Ficolin()
	mRNA_M_CAPK()
	mRNA_P_Endo16()
	PROTEIN_P_Not()
	mRNA_E_Brn()
	GENE_E_Hex()
	PROTEIN_P_Notch2()
	mRNA_M_Msp130()
	GENE_M_Gcm()
	GENE_M_Hex()
	PRE_M_cB()
	PRE_M_SoxB1()
	mRNA_M_Brn()
	GENE_P_Otx()
	GENE_P_z13()
	PRE_M_SuH()
	PROTEIN_M_Nrl()
	PROTEIN_M_Gcm()
	PROTEIN_P_GroTCF()
	mRNA_E_CAPK()
	GENE_M_Sm30()
	GENE_M_Pmar1()
	GENE_P_Ficolin()
	mRNA_E_UbiqSoxB1()
	PROTEIN_P_Brn()
	GENE_E_SoxB1()
	GENE_P_Apobec()
	PROTEIN_M_VEGFR()
	PROTEIN_M_Notch()
	GENE_E_CyP()
	PROTEIN_E_nBTCF()
	mRNA_M_Apobec()
	PROTEIN_M_Notch2()
	PROTEIN_P_Sm50()
	mRNA_E_Pmar1()
	PROTEIN_P_CAPK()
	PRE_E_Gcad()
	PROTEIN_P_Tgif()
	PROTEIN_E_Eve()
	PRE_E_UVAOtx()
	PROTEIN_E_TCF()
	PRE_P_Ets1()
	GENE_P_Brn()
	PROTEIN_E_Lim()
	PROTEIN_P_cB()
	PROTEIN_P_Gcm()
	mRNA_M_Gcad()
	mRNA_M_MspL()
	PROTEIN_M_VEGFSignal()
	PROTEIN_M_Ficolin()
	mRNA_P_Hnf6()
	GENE_E_FvMo()
	mRNA_E_Blimp1()
	PROTEIN_E_VEGF()
	PROTEIN_P_Endo16()
	PROTEIN_E_GSK3_i()
	GENE_M_Tel()
	GENE_P_Not()
	mRNA_E_Delta()
	mRNA_M_Dpt()
	mRNA_E_Apobec()
	GENE_P_FoxO()
	GENE_E_OrCt()
	mRNA_E_Otx()
	GENE_P_Bra()
	mRNA_M_Bra()
	PROTEIN_E_SoxC()
	mRNA_M_Pmar1()
	GENE_E_Sm30()
	PROTEIN_P_SuTx()
	PROTEIN_P_Eve()
	PRE_P_cB()
	PROTEIN_P_VEGFSignal()
	PROTEIN_P_GataE()
	PRE_M_UMANrl()
	mRNA_M_Ets1()
	GENE_E_Gelsolin()
	mRNA_E_Hnf6()
	mRNA_M_Notch()
	PRE_E_SuH()
	PROTEIN_E_GroTCF()
	GENE_E_Kakapo()
	PROTEIN_E_OrCt()
	mRNA_E_Sm30()
	GENE_M_FoxN23()
	GENE_E_Delta()
	PROTEIN_M_Wnt8()
	mRNA_M_Snail()
	mRNA_M_Delta()
	PROTEIN_M_UMADelta()
	GENE_M_Wnt8()
	PRE_M_Otx()
	PRE_P_UbiqES()
	mRNA_E_OrCt()
	PRE_P_L1()
	GENE_P_FoxN23()
	PROTEIN_P_Pks()
	GENE_P_SuTx()
	GENE_M_SoxC()
	mRNA_P_Sm50()
	PROTEIN_M_Not()
	GENE_M_Not()
	GENE_E_Tel()
	PROTEIN_P_GSK3_i()
	GENE_E_Endo16()
	mRNA_M_Erg()
	PROTEIN_E_Tgif()
	PRE_P_UbiqHnf6()
	mRNA_M_SuTx()
	PROTEIN_E_UVAOtx()
	PROTEIN_M_Dri()
	GENE_M_Kakapo()
	mRNA_E_Eve()
	GENE_E_Brn()
	mRNA_P_Ets1()
	PROTEIN_E_Not()
	mRNA_E_VEGFR()
	mRNA_M_SoxC()
	GENE_M_Tgif()
	GENE_E_FoxO()
	mRNA_P_Bra()
	PROTEIN_P_Sm27()
	mRNA_E_TBr()
	mRNA_P_L1()
	GENE_P_CyP()
	PROTEIN_P_Gcad()
	GENE_M_GataE()
	mRNA_M_Eve()
	GENE_P_FvMo()
	PROTEIN_M_GataC()
	mRNA_E_Bra()
	mRNA_P_Tgif()
	mRNA_P_UbiqHesC()
	GENE_E_Msp130()
	GENE_M_CAPK()
	PROTEIN_M_CyP()
	mRNA_M_Hox()
	GENE_P_Dri()
	PRE_E_cB()
	mRNA_M_Lim()
	mRNA_E_Gcm()
	PROTEIN_M_Sm27()
	PROTEIN_P_Gelsolin()
	GENE_E_Snail()
	mRNA_M_Tel()
	GENE_P_TBr()
	PRE_E_VEGF()
	mRNA_M_OrCt()
	PROTEIN_P_SoxB1()
	GENE_M_Snail()
	mRNA_E_FoxA()
	mRNA_E_Ficolin()
	GENE_M_Ets1()
	PROTEIN_M_Sm50()
	PROTEIN_P_VEGFR()
	mRNA_M_UMADelta()
	PROTEIN_M_Msp130()
	PROTEIN_P_Alx1()
	PROTEIN_M_GroTCF()
	PROTEIN_E_Snail()
	mRNA_P_FoxB()
	PROTEIN_M_SuHN()
	mRNA_E_FoxO()
	mRNA_E_FvMo()
	PRE_E_UMR()
	GENE_E_Alx1()
	GENE_M_Hnf6()
	PROTEIN_M_FoxN23()
	PROTEIN_P_Sm30()
	GENE_P_Delta()
	PROTEIN_M_Gelsolin()
	mRNA_E_Nrl()
	PROTEIN_P_Msp130()
	mRNA_P_Snail()
	PROTEIN_P_Dri()
	mRNA_P_Otx()
	mRNA_M_Not()
	PROTEIN_E_Gcm()
	mRNA_E_Wnt8()
	PROTEIN_E_FoxO()
	mRNA_E_Not()
	GENE_E_Pks()
	GENE_P_Sm30()
	GENE_E_Dpt()
	PROTEIN_E_Ets1()
	PROTEIN_E_L1()
	PROTEIN_P_FoxA()
	mRNA_P_z13()
	PROTEIN_P_SoxC()
	PRE_E_Notch()
	GENE_E_Wnt8()
	PROTEIN_M_Delta()
	PROTEIN_E_Pmar1()
	PROTEIN_E_Gelsolin()
	PROTEIN_P_HesC()
	GENE_M_Apobec()
	mRNA_E_Ets1()
	GENE_M_FoxB()
	PRE_E_UbiqSoxB1()
	mRNA_E_Kakapo()
	mRNA_P_Tel()
	GENE_E_Otx()
	PROTEIN_M_frizzled_i()
	PROTEIN_M_z13()
	PROTEIN_P_Ets1()
	GENE_P_FoxB()
	PRE_P_UbiqTel()
	PROTEIN_P_Delta2()
	GENE_E_FoxB()
	PROTEIN_P_SuHN()
	mRNA_E_SoxB1()
	PRE_M_UMADelta()
	mRNA_M_cB()
	PRE_M_UMR()
	GENE_M_Erg()
	mRNA_E_HesC()
	mRNA_P_UbiqTel()
	mRNA_M_FoxO()
	GENE_M_Nrl()
	PROTEIN_E_FoxN23()
	PROTEIN_M_Erg()
	PROTEIN_E_Bra()
	mRNA_M_Blimp1()
	mRNA_P_UbiqHnf6()
	PROTEIN_P_UbiqES()
	mRNA_M_Dri()
	GENE_P_OrCt()
	PROTEIN_E_Apobec()
	mRNA_E_Pks()
	mRNA_P_GataE()
	GENE_P_SoxB1()
	mRNA_M_UMANrl()
	PROTEIN_P_GSK3_a()
	mRNA_P_Hex()
	mRNA_P_Sm30()
	mRNA_M_Hnf6()
	GENE_E_Eve()
	PROTEIN_E_cB()
	mRNA_E_Tgif()
	PROTEIN_P_MspL()
	PROTEIN_P_UbiqHnf6()
	PROTEIN_M_Ets1()
	PROTEIN_E_Nrl()
	GENE_M_Ficolin()
	PROTEIN_P_UbiqAlx1()
	mRNA_P_Gcm()
	mRNA_P_Nrl()
	PROTEIN_P_UbiqEts1()
	PRE_P_Gcad()
	PROTEIN_M_FoxA()
	PROTEIN_M_FoxO()
	mRNA_E_FoxB()
	GENE_P_SoxC()
	mRNA_M_UbiqSoxB1()
	mRNA_M_GataC()
	GENE_P_Blimp1()
	PROTEIN_P_SuH()
	GENE_E_TBr()
	mRNA_E_Dpt()
	PROTEIN_M_UbiqSoxB1()
	mRNA_M_Gelsolin()
	PROTEIN_E_Wnt8()
	GENE_M_HesC()
	PROTEIN_E_Hnf6()
	mRNA_M_Hex()
	GENE_E_Gcm()
	PROTEIN_M_OrCt()
	PROTEIN_E_SuTx()
	PROTEIN_M_SoxC()
	GENE_E_Dri()
	PROTEIN_M_nBTCF()
	GENE_P_Lim()
	PROTEIN_E_Hex()
	PROTEIN_P_Snail()
	GENE_M_Brn()
	mRNA_P_SuTx()
	GENE_E_Ets1()
	PROTEIN_M_Lim()
	PROTEIN_E_Tel()
	PROTEIN_E_HesC()
	GENE_E_Pmar1()
	GENE_E_FoxA()
	GENE_E_Sm50()
	PROTEIN_P_FoxN23()
	mRNA_E_Alx1()
	PROTEIN_P_CyP()
	PROTEIN_P_Hox()
	mRNA_M_FoxN23()
	PROTEIN_M_Hex()
	PROTEIN_E_GataC()
	GENE_E_Nrl()
	GENE_P_Hnf6()
	PROTEIN_M_Endo16()
	GENE_P_MspL()
	GENE_M_z13()
	PROTEIN_E_z13()
	PROTEIN_P_Erg()
	mRNA_E_z13()
	GENE_P_Tgif()
	PRE_M_Gcad()
	PROTEIN_M_Pks()
	PROTEIN_P_Blimp1()
	PROTEIN_E_Hox()
	GENE_M_Sm50()
	GENE_P_Eve()
	mRNA_P_UbiqEts1()
	mRNA_M_CyP()
	PROTEIN_P_FoxB()
	mRNA_M_Sm27()
	PROTEIN_P_UbiqHesC()
	GENE_E_SoxC()
	PROTEIN_M_Alx1()
	GENE_E_Blimp1()
	PROTEIN_E_TBr()
	PROTEIN_E_Sm50()
	GENE_P_Endo16()
	mRNA_P_Gelsolin()
	PROTEIN_E_GSK3_a()
end molecule types
begin seed species
	@Compartment__cell:PROTEIN_E_GSK3_i() 1.2044e+25 # 20.0mol/L * 6.022e23/mol *1.0L #PROTEIN_E_GSK3_i #PROTEIN_E_GSK3_i
	@Compartment__cell:PROTEIN_E_Gcad() 6.022e+24 #original 10.0mol/L  #PROTEIN_E_Gcad #PROTEIN_E_Gcad
	@Compartment__cell:PROTEIN_E_Gro() 1.8066000000000001e+25 #original 30.0mol/L  #PROTEIN_E_Gro #PROTEIN_E_Gro
	@Compartment__cell:PROTEIN_E_Otx() 6.022e+24 #original 10.0mol/L  #PROTEIN_E_Otx #PROTEIN_E_Otx
	@Compartment__cell:PROTEIN_E_SoxB1() 6.022e+24 #original 10.0mol/L  #PROTEIN_E_SoxB1 #PROTEIN_E_SoxB1
	@Compartment__cell:PROTEIN_E_UbiqSoxB1() 6.022e+24 #original 10.0mol/L  #PROTEIN_E_UbiqSoxB1 #PROTEIN_E_UbiqSoxB1
	@Compartment__cell:PROTEIN_E_cB() 6.022e+24 #original 10.0mol/L  #PROTEIN_E_cB #PROTEIN_E_cB
	@Compartment__cell:PROTEIN_E_frizzled_a() 1.2044e+25 #original 20.0mol/L  #PROTEIN_E_frizzled_a #PROTEIN_E_frizzled_a
	@Compartment__cell:PROTEIN_M_GSK3_i() 1.2044e+25 #original 20.0mol/L  #PROTEIN_M_GSK3_i #PROTEIN_M_GSK3_i
	@Compartment__cell:PROTEIN_M_Gcad() 6.022e+24 #original 10.0mol/L  #PROTEIN_M_Gcad #PROTEIN_M_Gcad
	@Compartment__cell:PROTEIN_M_Gro() 1.8066000000000001e+25 #original 30.0mol/L  #PROTEIN_M_Gro #PROTEIN_M_Gro
	@Compartment__cell:PROTEIN_M_Notch() 6.022e+24 #original 10.0mol/L  #PROTEIN_M_Notch #PROTEIN_M_Notch
	@Compartment__cell:PROTEIN_M_Otx() 6.022e+24 #original 10.0mol/L  #PROTEIN_M_Otx #PROTEIN_M_Otx
	@Compartment__cell:PROTEIN_M_SoxB1() 6.022e+24 #original 10.0mol/L  #PROTEIN_M_SoxB1 #PROTEIN_M_SoxB1
	@Compartment__cell:PROTEIN_M_UbiqSoxB1() 6.022e+24 #original 10.0mol/L  #PROTEIN_M_UbiqSoxB1 #PROTEIN_M_UbiqSoxB1
	@Compartment__cell:PROTEIN_M_cB() 6.022e+24 #original 10.0mol/L  #PROTEIN_M_cB #PROTEIN_M_cB
	@Compartment__cell:PROTEIN_M_frizzled_a() 1.2044e+25 #original 20.0mol/L  #PROTEIN_M_frizzled_a #PROTEIN_M_frizzled_a
	@Compartment__cell:PROTEIN_P_Ets1() 6.022e+24 #original 10.0mol/L  #PROTEIN_P_Ets1 #PROTEIN_P_Ets1
	@Compartment__cell:PROTEIN_P_GSK3_i() 1.2044e+25 #original 20.0mol/L  #PROTEIN_P_GSK3_i #PROTEIN_P_GSK3_i
	@Compartment__cell:PROTEIN_P_Gcad() 6.022e+24 #original 10.0mol/L  #PROTEIN_P_Gcad #PROTEIN_P_Gcad
	@Compartment__cell:PROTEIN_P_Gro() 1.8066000000000001e+25 #original 30.0mol/L  #PROTEIN_P_Gro #PROTEIN_P_Gro
	@Compartment__cell:PROTEIN_P_Otx() 6.022e+24 #original 10.0mol/L  #PROTEIN_P_Otx #PROTEIN_P_Otx
	@Compartment__cell:PROTEIN_P_UbiqAlx1() 6.022e+24 #original 10.0mol/L  #PROTEIN_P_UbiqAlx1 #PROTEIN_P_UbiqAlx1
	@Compartment__cell:PROTEIN_P_UbiqES() 6.022e+24 #original 10.0mol/L  #PROTEIN_P_UbiqES #PROTEIN_P_UbiqES
	@Compartment__cell:PROTEIN_P_UbiqEts1() 6.022e+24 #original 10.0mol/L  #PROTEIN_P_UbiqEts1 #PROTEIN_P_UbiqEts1
	@Compartment__cell:PROTEIN_P_UbiqHesC() 6.022e+24 #original 10.0mol/L  #PROTEIN_P_UbiqHesC #PROTEIN_P_UbiqHesC
	@Compartment__cell:PROTEIN_P_UbiqHnf6() 6.022e+24 #original 10.0mol/L  #PROTEIN_P_UbiqHnf6 #PROTEIN_P_UbiqHnf6
	@Compartment__cell:PROTEIN_P_UbiqSoxC() 6.022e+24 #original 10.0mol/L  #PROTEIN_P_UbiqSoxC #PROTEIN_P_UbiqSoxC
	@Compartment__cell:PROTEIN_P_UbiqTel() 6.022e+24 #original 10.0mol/L  #PROTEIN_P_UbiqTel #PROTEIN_P_UbiqTel
	@Compartment__cell:PROTEIN_P_cB() 6.022e+24 #original 10.0mol/L  #PROTEIN_P_cB #PROTEIN_P_cB
	@Compartment__cell:PROTEIN_P_frizzled_a() 1.2044e+25 #original 20.0mol/L  #PROTEIN_P_frizzled_a #PROTEIN_P_frizzled_a
end seed species
begin observables
	Species GENE_E_Alx1_Compartment__cell @Compartment__cell:GENE_E_Alx1() #GENE_E_Alx1
	Species GENE_E_Apobec_Compartment__cell @Compartment__cell:GENE_E_Apobec() #GENE_E_Apobec
	Species GENE_E_Blimp1_Compartment__cell @Compartment__cell:GENE_E_Blimp1() #GENE_E_Blimp1
	Species GENE_E_Bra_Compartment__cell @Compartment__cell:GENE_E_Bra() #GENE_E_Bra
	Species GENE_E_Brn_Compartment__cell @Compartment__cell:GENE_E_Brn() #GENE_E_Brn
	Species GENE_E_CyP_Compartment__cell @Compartment__cell:GENE_E_CyP() #GENE_E_CyP
	Species GENE_E_Delta_Compartment__cell @Compartment__cell:GENE_E_Delta() #GENE_E_Delta
	Species GENE_E_Dpt_Compartment__cell @Compartment__cell:GENE_E_Dpt() #GENE_E_Dpt
	Species GENE_E_Dri_Compartment__cell @Compartment__cell:GENE_E_Dri() #GENE_E_Dri
	Species GENE_E_ES_Compartment__cell @Compartment__cell:GENE_E_ES() #GENE_E_ES
	Species GENE_E_Endo16_Compartment__cell @Compartment__cell:GENE_E_Endo16() #GENE_E_Endo16
	Species GENE_E_Erg_Compartment__cell @Compartment__cell:GENE_E_Erg() #GENE_E_Erg
	Species GENE_E_Ets1_Compartment__cell @Compartment__cell:GENE_E_Ets1() #GENE_E_Ets1
	Species GENE_E_Eve_Compartment__cell @Compartment__cell:GENE_E_Eve() #GENE_E_Eve
	Species GENE_E_Ficolin_Compartment__cell @Compartment__cell:GENE_E_Ficolin() #GENE_E_Ficolin
	Species GENE_E_FoxA_Compartment__cell @Compartment__cell:GENE_E_FoxA() #GENE_E_FoxA
	Species GENE_E_FoxB_Compartment__cell @Compartment__cell:GENE_E_FoxB() #GENE_E_FoxB
	Species GENE_E_FoxN23_Compartment__cell @Compartment__cell:GENE_E_FoxN23() #GENE_E_FoxN23
	Species GENE_E_FoxO_Compartment__cell @Compartment__cell:GENE_E_FoxO() #GENE_E_FoxO
	Species GENE_E_FvMo_Compartment__cell @Compartment__cell:GENE_E_FvMo() #GENE_E_FvMo
	Species GENE_E_GataC_Compartment__cell @Compartment__cell:GENE_E_GataC() #GENE_E_GataC
	Species GENE_E_GataE_Compartment__cell @Compartment__cell:GENE_E_GataE() #GENE_E_GataE
	Species GENE_E_Gcad_Compartment__cell @Compartment__cell:GENE_E_Gcad() #GENE_E_Gcad
	Species GENE_E_Gcm_Compartment__cell @Compartment__cell:GENE_E_Gcm() #GENE_E_Gcm
	Species GENE_E_Gelsolin_Compartment__cell @Compartment__cell:GENE_E_Gelsolin() #GENE_E_Gelsolin
	Species GENE_E_HesC_Compartment__cell @Compartment__cell:GENE_E_HesC() #GENE_E_HesC
	Species GENE_E_Hex_Compartment__cell @Compartment__cell:GENE_E_Hex() #GENE_E_Hex
	Species GENE_E_Hnf6_Compartment__cell @Compartment__cell:GENE_E_Hnf6() #GENE_E_Hnf6
	Species GENE_E_Hox_Compartment__cell @Compartment__cell:GENE_E_Hox() #GENE_E_Hox
	Species GENE_E_Kakapo_Compartment__cell @Compartment__cell:GENE_E_Kakapo() #GENE_E_Kakapo
	Species GENE_E_Lim_Compartment__cell @Compartment__cell:GENE_E_Lim() #GENE_E_Lim
	Species GENE_E_Msp130_Compartment__cell @Compartment__cell:GENE_E_Msp130() #GENE_E_Msp130
	Species GENE_E_MspL_Compartment__cell @Compartment__cell:GENE_E_MspL() #GENE_E_MspL
	Species GENE_E_Not_Compartment__cell @Compartment__cell:GENE_E_Not() #GENE_E_Not
	Species GENE_E_Nrl_Compartment__cell @Compartment__cell:GENE_E_Nrl() #GENE_E_Nrl
	Species GENE_E_OrCt_Compartment__cell @Compartment__cell:GENE_E_OrCt() #GENE_E_OrCt
	Species GENE_E_Otx_Compartment__cell @Compartment__cell:GENE_E_Otx() #GENE_E_Otx
	Species GENE_E_Pks_Compartment__cell @Compartment__cell:GENE_E_Pks() #GENE_E_Pks
	Species GENE_E_Pmar1_Compartment__cell @Compartment__cell:GENE_E_Pmar1() #GENE_E_Pmar1
	Species GENE_E_Sm27_Compartment__cell @Compartment__cell:GENE_E_Sm27() #GENE_E_Sm27
	Species GENE_E_Sm30_Compartment__cell @Compartment__cell:GENE_E_Sm30() #GENE_E_Sm30
	Species GENE_E_Sm50_Compartment__cell @Compartment__cell:GENE_E_Sm50() #GENE_E_Sm50
	Species GENE_E_Snail_Compartment__cell @Compartment__cell:GENE_E_Snail() #GENE_E_Snail
	Species GENE_E_SoxB1_Compartment__cell @Compartment__cell:GENE_E_SoxB1() #GENE_E_SoxB1
	Species GENE_E_SoxC_Compartment__cell @Compartment__cell:GENE_E_SoxC() #GENE_E_SoxC
	Species GENE_E_SuTx_Compartment__cell @Compartment__cell:GENE_E_SuTx() #GENE_E_SuTx
	Species GENE_E_TBr_Compartment__cell @Compartment__cell:GENE_E_TBr() #GENE_E_TBr
	Species GENE_E_Tel_Compartment__cell @Compartment__cell:GENE_E_Tel() #GENE_E_Tel
	Species GENE_E_Tgif_Compartment__cell @Compartment__cell:GENE_E_Tgif() #GENE_E_Tgif
	Species GENE_E_VEGFR_Compartment__cell @Compartment__cell:GENE_E_VEGFR() #GENE_E_VEGFR
	Species GENE_E_Wnt8_Compartment__cell @Compartment__cell:GENE_E_Wnt8() #GENE_E_Wnt8
	Species GENE_E_z13_Compartment__cell @Compartment__cell:GENE_E_z13() #GENE_E_z13
	Species GENE_M_Alx1_Compartment__cell @Compartment__cell:GENE_M_Alx1() #GENE_M_Alx1
	Species GENE_M_Apobec_Compartment__cell @Compartment__cell:GENE_M_Apobec() #GENE_M_Apobec
	Species GENE_M_Blimp1_Compartment__cell @Compartment__cell:GENE_M_Blimp1() #GENE_M_Blimp1
	Species GENE_M_Bra_Compartment__cell @Compartment__cell:GENE_M_Bra() #GENE_M_Bra
	Species GENE_M_Brn_Compartment__cell @Compartment__cell:GENE_M_Brn() #GENE_M_Brn
	Species GENE_M_CAPK_Compartment__cell @Compartment__cell:GENE_M_CAPK() #GENE_M_CAPK
	Species GENE_M_CyP_Compartment__cell @Compartment__cell:GENE_M_CyP() #GENE_M_CyP
	Species GENE_M_Delta_Compartment__cell @Compartment__cell:GENE_M_Delta() #GENE_M_Delta
	Species GENE_M_Dpt_Compartment__cell @Compartment__cell:GENE_M_Dpt() #GENE_M_Dpt
	Species GENE_M_Dri_Compartment__cell @Compartment__cell:GENE_M_Dri() #GENE_M_Dri
	Species GENE_M_Endo16_Compartment__cell @Compartment__cell:GENE_M_Endo16() #GENE_M_Endo16
	Species GENE_M_Erg_Compartment__cell @Compartment__cell:GENE_M_Erg() #GENE_M_Erg
	Species GENE_M_Ets1_Compartment__cell @Compartment__cell:GENE_M_Ets1() #GENE_M_Ets1
	Species GENE_M_Eve_Compartment__cell @Compartment__cell:GENE_M_Eve() #GENE_M_Eve
	Species GENE_M_Ficolin_Compartment__cell @Compartment__cell:GENE_M_Ficolin() #GENE_M_Ficolin
	Species GENE_M_FoxA_Compartment__cell @Compartment__cell:GENE_M_FoxA() #GENE_M_FoxA
	Species GENE_M_FoxB_Compartment__cell @Compartment__cell:GENE_M_FoxB() #GENE_M_FoxB
	Species GENE_M_FoxN23_Compartment__cell @Compartment__cell:GENE_M_FoxN23() #GENE_M_FoxN23
	Species GENE_M_FoxO_Compartment__cell @Compartment__cell:GENE_M_FoxO() #GENE_M_FoxO
	Species GENE_M_FvMo_Compartment__cell @Compartment__cell:GENE_M_FvMo() #GENE_M_FvMo
	Species GENE_M_GataC_Compartment__cell @Compartment__cell:GENE_M_GataC() #GENE_M_GataC
	Species GENE_M_GataE_Compartment__cell @Compartment__cell:GENE_M_GataE() #GENE_M_GataE
	Species GENE_M_Gcad_Compartment__cell @Compartment__cell:GENE_M_Gcad() #GENE_M_Gcad
	Species GENE_M_Gcm_Compartment__cell @Compartment__cell:GENE_M_Gcm() #GENE_M_Gcm
	Species GENE_M_Gelsolin_Compartment__cell @Compartment__cell:GENE_M_Gelsolin() #GENE_M_Gelsolin
	Species GENE_M_HesC_Compartment__cell @Compartment__cell:GENE_M_HesC() #GENE_M_HesC
	Species GENE_M_Hex_Compartment__cell @Compartment__cell:GENE_M_Hex() #GENE_M_Hex
	Species GENE_M_Hnf6_Compartment__cell @Compartment__cell:GENE_M_Hnf6() #GENE_M_Hnf6
	Species GENE_M_Hox_Compartment__cell @Compartment__cell:GENE_M_Hox() #GENE_M_Hox
	Species GENE_M_Kakapo_Compartment__cell @Compartment__cell:GENE_M_Kakapo() #GENE_M_Kakapo
	Species GENE_M_Lim_Compartment__cell @Compartment__cell:GENE_M_Lim() #GENE_M_Lim
	Species GENE_M_Msp130_Compartment__cell @Compartment__cell:GENE_M_Msp130() #GENE_M_Msp130
	Species GENE_M_MspL_Compartment__cell @Compartment__cell:GENE_M_MspL() #GENE_M_MspL
	Species GENE_M_Not_Compartment__cell @Compartment__cell:GENE_M_Not() #GENE_M_Not
	Species GENE_M_Nrl_Compartment__cell @Compartment__cell:GENE_M_Nrl() #GENE_M_Nrl
	Species GENE_M_OrCt_Compartment__cell @Compartment__cell:GENE_M_OrCt() #GENE_M_OrCt
	Species GENE_M_Otx_Compartment__cell @Compartment__cell:GENE_M_Otx() #GENE_M_Otx
	Species GENE_M_Pks_Compartment__cell @Compartment__cell:GENE_M_Pks() #GENE_M_Pks
	Species GENE_M_Pmar1_Compartment__cell @Compartment__cell:GENE_M_Pmar1() #GENE_M_Pmar1
	Species GENE_M_Sm27_Compartment__cell @Compartment__cell:GENE_M_Sm27() #GENE_M_Sm27
	Species GENE_M_Sm30_Compartment__cell @Compartment__cell:GENE_M_Sm30() #GENE_M_Sm30
	Species GENE_M_Sm50_Compartment__cell @Compartment__cell:GENE_M_Sm50() #GENE_M_Sm50
	Species GENE_M_Snail_Compartment__cell @Compartment__cell:GENE_M_Snail() #GENE_M_Snail
	Species GENE_M_SoxB1_Compartment__cell @Compartment__cell:GENE_M_SoxB1() #GENE_M_SoxB1
	Species GENE_M_SoxC_Compartment__cell @Compartment__cell:GENE_M_SoxC() #GENE_M_SoxC
	Species GENE_M_SuTx_Compartment__cell @Compartment__cell:GENE_M_SuTx() #GENE_M_SuTx
	Species GENE_M_TBr_Compartment__cell @Compartment__cell:GENE_M_TBr() #GENE_M_TBr
	Species GENE_M_Tel_Compartment__cell @Compartment__cell:GENE_M_Tel() #GENE_M_Tel
	Species GENE_M_Tgif_Compartment__cell @Compartment__cell:GENE_M_Tgif() #GENE_M_Tgif
	Species GENE_M_VEGFR_Compartment__cell @Compartment__cell:GENE_M_VEGFR() #GENE_M_VEGFR
	Species GENE_M_Wnt8_Compartment__cell @Compartment__cell:GENE_M_Wnt8() #GENE_M_Wnt8
	Species GENE_M_z13_Compartment__cell @Compartment__cell:GENE_M_z13() #GENE_M_z13
	Species GENE_P_Alx1_Compartment__cell @Compartment__cell:GENE_P_Alx1() #GENE_P_Alx1
	Species GENE_P_Apobec_Compartment__cell @Compartment__cell:GENE_P_Apobec() #GENE_P_Apobec
	Species GENE_P_Blimp1_Compartment__cell @Compartment__cell:GENE_P_Blimp1() #GENE_P_Blimp1
	Species GENE_P_Bra_Compartment__cell @Compartment__cell:GENE_P_Bra() #GENE_P_Bra
	Species GENE_P_Brn_Compartment__cell @Compartment__cell:GENE_P_Brn() #GENE_P_Brn
	Species GENE_P_CyP_Compartment__cell @Compartment__cell:GENE_P_CyP() #GENE_P_CyP
	Species GENE_P_Delta_Compartment__cell @Compartment__cell:GENE_P_Delta() #GENE_P_Delta
	Species GENE_P_Dpt_Compartment__cell @Compartment__cell:GENE_P_Dpt() #GENE_P_Dpt
	Species GENE_P_Dri_Compartment__cell @Compartment__cell:GENE_P_Dri() #GENE_P_Dri
	Species GENE_P_Endo16_Compartment__cell @Compartment__cell:GENE_P_Endo16() #GENE_P_Endo16
	Species GENE_P_Erg_Compartment__cell @Compartment__cell:GENE_P_Erg() #GENE_P_Erg
	Species GENE_P_Ets1_Compartment__cell @Compartment__cell:GENE_P_Ets1() #GENE_P_Ets1
	Species GENE_P_Eve_Compartment__cell @Compartment__cell:GENE_P_Eve() #GENE_P_Eve
	Species GENE_P_Ficolin_Compartment__cell @Compartment__cell:GENE_P_Ficolin() #GENE_P_Ficolin
	Species GENE_P_FoxA_Compartment__cell @Compartment__cell:GENE_P_FoxA() #GENE_P_FoxA
	Species GENE_P_FoxB_Compartment__cell @Compartment__cell:GENE_P_FoxB() #GENE_P_FoxB
	Species GENE_P_FoxN23_Compartment__cell @Compartment__cell:GENE_P_FoxN23() #GENE_P_FoxN23
	Species GENE_P_FoxO_Compartment__cell @Compartment__cell:GENE_P_FoxO() #GENE_P_FoxO
	Species GENE_P_FvMo_Compartment__cell @Compartment__cell:GENE_P_FvMo() #GENE_P_FvMo
	Species GENE_P_GataC_Compartment__cell @Compartment__cell:GENE_P_GataC() #GENE_P_GataC
	Species GENE_P_GataE_Compartment__cell @Compartment__cell:GENE_P_GataE() #GENE_P_GataE
	Species GENE_P_Gcad_Compartment__cell @Compartment__cell:GENE_P_Gcad() #GENE_P_Gcad
	Species GENE_P_Gcm_Compartment__cell @Compartment__cell:GENE_P_Gcm() #GENE_P_Gcm
	Species GENE_P_Gelsolin_Compartment__cell @Compartment__cell:GENE_P_Gelsolin() #GENE_P_Gelsolin
	Species GENE_P_HesC_Compartment__cell @Compartment__cell:GENE_P_HesC() #GENE_P_HesC
	Species GENE_P_Hex_Compartment__cell @Compartment__cell:GENE_P_Hex() #GENE_P_Hex
	Species GENE_P_Hnf6_Compartment__cell @Compartment__cell:GENE_P_Hnf6() #GENE_P_Hnf6
	Species GENE_P_Hox_Compartment__cell @Compartment__cell:GENE_P_Hox() #GENE_P_Hox
	Species GENE_P_Kakapo_Compartment__cell @Compartment__cell:GENE_P_Kakapo() #GENE_P_Kakapo
	Species GENE_P_Lim_Compartment__cell @Compartment__cell:GENE_P_Lim() #GENE_P_Lim
	Species GENE_P_Msp130_Compartment__cell @Compartment__cell:GENE_P_Msp130() #GENE_P_Msp130
	Species GENE_P_MspL_Compartment__cell @Compartment__cell:GENE_P_MspL() #GENE_P_MspL
	Species GENE_P_Not_Compartment__cell @Compartment__cell:GENE_P_Not() #GENE_P_Not
	Species GENE_P_Nrl_Compartment__cell @Compartment__cell:GENE_P_Nrl() #GENE_P_Nrl
	Species GENE_P_OrCt_Compartment__cell @Compartment__cell:GENE_P_OrCt() #GENE_P_OrCt
	Species GENE_P_Otx_Compartment__cell @Compartment__cell:GENE_P_Otx() #GENE_P_Otx
	Species GENE_P_Pks_Compartment__cell @Compartment__cell:GENE_P_Pks() #GENE_P_Pks
	Species GENE_P_Pmar1_Compartment__cell @Compartment__cell:GENE_P_Pmar1() #GENE_P_Pmar1
	Species GENE_P_Sm27_Compartment__cell @Compartment__cell:GENE_P_Sm27() #GENE_P_Sm27
	Species GENE_P_Sm30_Compartment__cell @Compartment__cell:GENE_P_Sm30() #GENE_P_Sm30
	Species GENE_P_Sm50_Compartment__cell @Compartment__cell:GENE_P_Sm50() #GENE_P_Sm50
	Species GENE_P_Snail_Compartment__cell @Compartment__cell:GENE_P_Snail() #GENE_P_Snail
	Species GENE_P_SoxB1_Compartment__cell @Compartment__cell:GENE_P_SoxB1() #GENE_P_SoxB1
	Species GENE_P_SoxC_Compartment__cell @Compartment__cell:GENE_P_SoxC() #GENE_P_SoxC
	Species GENE_P_SuTx_Compartment__cell @Compartment__cell:GENE_P_SuTx() #GENE_P_SuTx
	Species GENE_P_TBr_Compartment__cell @Compartment__cell:GENE_P_TBr() #GENE_P_TBr
	Species GENE_P_Tel_Compartment__cell @Compartment__cell:GENE_P_Tel() #GENE_P_Tel
	Species GENE_P_Tgif_Compartment__cell @Compartment__cell:GENE_P_Tgif() #GENE_P_Tgif
	Species GENE_P_VEGFR_Compartment__cell @Compartment__cell:GENE_P_VEGFR() #GENE_P_VEGFR
	Species GENE_P_Wnt8_Compartment__cell @Compartment__cell:GENE_P_Wnt8() #GENE_P_Wnt8
	Species GENE_P_z13_Compartment__cell @Compartment__cell:GENE_P_z13() #GENE_P_z13
	Species PRE_E_Gcad_Compartment__cell @Compartment__cell:PRE_E_Gcad() #PRE_E_Gcad
	Species PRE_E_Notch_Compartment__cell @Compartment__cell:PRE_E_Notch() #PRE_E_Notch
	Species PRE_E_Otx_Compartment__cell @Compartment__cell:PRE_E_Otx() #PRE_E_Otx
	Species PRE_E_SoxB1_Compartment__cell @Compartment__cell:PRE_E_SoxB1() #PRE_E_SoxB1
	Species PRE_E_SuH_Compartment__cell @Compartment__cell:PRE_E_SuH() #PRE_E_SuH
	Species PRE_E_UMR_Compartment__cell @Compartment__cell:PRE_E_UMR() #PRE_E_UMR
	Species PRE_E_UVAOtx_Compartment__cell @Compartment__cell:PRE_E_UVAOtx() #PRE_E_UVAOtx
	Species PRE_E_UbiqSoxB1_Compartment__cell @Compartment__cell:PRE_E_UbiqSoxB1() #PRE_E_UbiqSoxB1
	Species PRE_E_VEGF_Compartment__cell @Compartment__cell:PRE_E_VEGF() #PRE_E_VEGF
	Species PRE_E_cB_Compartment__cell @Compartment__cell:PRE_E_cB() #PRE_E_cB
	Species PRE_M_Gcad_Compartment__cell @Compartment__cell:PRE_M_Gcad() #PRE_M_Gcad
	Species PRE_M_Notch_Compartment__cell @Compartment__cell:PRE_M_Notch() #PRE_M_Notch
	Species PRE_M_Otx_Compartment__cell @Compartment__cell:PRE_M_Otx() #PRE_M_Otx
	Species PRE_M_SoxB1_Compartment__cell @Compartment__cell:PRE_M_SoxB1() #PRE_M_SoxB1
	Species PRE_M_SuH_Compartment__cell @Compartment__cell:PRE_M_SuH() #PRE_M_SuH
	Species PRE_M_UMADelta_Compartment__cell @Compartment__cell:PRE_M_UMADelta() #PRE_M_UMADelta
	Species PRE_M_UMANrl_Compartment__cell @Compartment__cell:PRE_M_UMANrl() #PRE_M_UMANrl
	Species PRE_M_UMR_Compartment__cell @Compartment__cell:PRE_M_UMR() #PRE_M_UMR
	Species PRE_M_UbiqSoxB1_Compartment__cell @Compartment__cell:PRE_M_UbiqSoxB1() #PRE_M_UbiqSoxB1
	Species PRE_M_cB_Compartment__cell @Compartment__cell:PRE_M_cB() #PRE_M_cB
	Species PRE_P_Ets1_Compartment__cell @Compartment__cell:PRE_P_Ets1() #PRE_P_Ets1
	Species PRE_P_Gcad_Compartment__cell @Compartment__cell:PRE_P_Gcad() #PRE_P_Gcad
	Species PRE_P_L1_Compartment__cell @Compartment__cell:PRE_P_L1() #PRE_P_L1
	Species PRE_P_Otx_Compartment__cell @Compartment__cell:PRE_P_Otx() #PRE_P_Otx
	Species PRE_P_UbiqAlx1_Compartment__cell @Compartment__cell:PRE_P_UbiqAlx1() #PRE_P_UbiqAlx1
	Species PRE_P_UbiqES_Compartment__cell @Compartment__cell:PRE_P_UbiqES() #PRE_P_UbiqES
	Species PRE_P_UbiqEts1_Compartment__cell @Compartment__cell:PRE_P_UbiqEts1() #PRE_P_UbiqEts1
	Species PRE_P_UbiqHesC_Compartment__cell @Compartment__cell:PRE_P_UbiqHesC() #PRE_P_UbiqHesC
	Species PRE_P_UbiqHnf6_Compartment__cell @Compartment__cell:PRE_P_UbiqHnf6() #PRE_P_UbiqHnf6
	Species PRE_P_UbiqSoxC_Compartment__cell @Compartment__cell:PRE_P_UbiqSoxC() #PRE_P_UbiqSoxC
	Species PRE_P_UbiqTel_Compartment__cell @Compartment__cell:PRE_P_UbiqTel() #PRE_P_UbiqTel
	Species PRE_P_cB_Compartment__cell @Compartment__cell:PRE_P_cB() #PRE_P_cB
	Species PROTEIN_E_Alx1_Compartment__cell @Compartment__cell:PROTEIN_E_Alx1() #PROTEIN_E_Alx1
	Species PROTEIN_E_Apobec_Compartment__cell @Compartment__cell:PROTEIN_E_Apobec() #PROTEIN_E_Apobec
	Species PROTEIN_E_Blimp1_Compartment__cell @Compartment__cell:PROTEIN_E_Blimp1() #PROTEIN_E_Blimp1
	Species PROTEIN_E_Bra_Compartment__cell @Compartment__cell:PROTEIN_E_Bra() #PROTEIN_E_Bra
	Species PROTEIN_E_Brn_Compartment__cell @Compartment__cell:PROTEIN_E_Brn() #PROTEIN_E_Brn
	Species PROTEIN_E_CAPK_Compartment__cell @Compartment__cell:PROTEIN_E_CAPK() #PROTEIN_E_CAPK
	Species PROTEIN_E_CyP_Compartment__cell @Compartment__cell:PROTEIN_E_CyP() #PROTEIN_E_CyP
	Species PROTEIN_E_Delta_Compartment__cell @Compartment__cell:PROTEIN_E_Delta() #PROTEIN_E_Delta
	Species PROTEIN_E_Delta2_Compartment__cell @Compartment__cell:PROTEIN_E_Delta2() #PROTEIN_E_Delta2
	Species PROTEIN_E_Dpt_Compartment__cell @Compartment__cell:PROTEIN_E_Dpt() #PROTEIN_E_Dpt
	Species PROTEIN_E_Dri_Compartment__cell @Compartment__cell:PROTEIN_E_Dri() #PROTEIN_E_Dri
	Species PROTEIN_E_ES_Compartment__cell @Compartment__cell:PROTEIN_E_ES() #PROTEIN_E_ES
	Species PROTEIN_E_Endo16_Compartment__cell @Compartment__cell:PROTEIN_E_Endo16() #PROTEIN_E_Endo16
	Species PROTEIN_E_Erg_Compartment__cell @Compartment__cell:PROTEIN_E_Erg() #PROTEIN_E_Erg
	Species PROTEIN_E_Ets1_Compartment__cell @Compartment__cell:PROTEIN_E_Ets1() #PROTEIN_E_Ets1
	Species PROTEIN_E_Eve_Compartment__cell @Compartment__cell:PROTEIN_E_Eve() #PROTEIN_E_Eve
	Species PROTEIN_E_Ficolin_Compartment__cell @Compartment__cell:PROTEIN_E_Ficolin() #PROTEIN_E_Ficolin
	Species PROTEIN_E_FoxA_Compartment__cell @Compartment__cell:PROTEIN_E_FoxA() #PROTEIN_E_FoxA
	Species PROTEIN_E_FoxB_Compartment__cell @Compartment__cell:PROTEIN_E_FoxB() #PROTEIN_E_FoxB
	Species PROTEIN_E_FoxN23_Compartment__cell @Compartment__cell:PROTEIN_E_FoxN23() #PROTEIN_E_FoxN23
	Species PROTEIN_E_FoxO_Compartment__cell @Compartment__cell:PROTEIN_E_FoxO() #PROTEIN_E_FoxO
	Species PROTEIN_E_FvMo_Compartment__cell @Compartment__cell:PROTEIN_E_FvMo() #PROTEIN_E_FvMo
	Species PROTEIN_E_GSK3_a_Compartment__cell @Compartment__cell:PROTEIN_E_GSK3_a() #PROTEIN_E_GSK3_a
	Species PROTEIN_E_GSK3_i_Compartment__cell @Compartment__cell:PROTEIN_E_GSK3_i() #PROTEIN_E_GSK3_i
	Species PROTEIN_E_GataC_Compartment__cell @Compartment__cell:PROTEIN_E_GataC() #PROTEIN_E_GataC
	Species PROTEIN_E_GataE_Compartment__cell @Compartment__cell:PROTEIN_E_GataE() #PROTEIN_E_GataE
	Species PROTEIN_E_Gcad_Compartment__cell @Compartment__cell:PROTEIN_E_Gcad() #PROTEIN_E_Gcad
	Species PROTEIN_E_Gcm_Compartment__cell @Compartment__cell:PROTEIN_E_Gcm() #PROTEIN_E_Gcm
	Species PROTEIN_E_Gelsolin_Compartment__cell @Compartment__cell:PROTEIN_E_Gelsolin() #PROTEIN_E_Gelsolin
	Species PROTEIN_E_Gro_Compartment__cell @Compartment__cell:PROTEIN_E_Gro() #PROTEIN_E_Gro
	Species PROTEIN_E_GroTCF_Compartment__cell @Compartment__cell:PROTEIN_E_GroTCF() #PROTEIN_E_GroTCF
	Species PROTEIN_E_HesC_Compartment__cell @Compartment__cell:PROTEIN_E_HesC() #PROTEIN_E_HesC
	Species PROTEIN_E_Hex_Compartment__cell @Compartment__cell:PROTEIN_E_Hex() #PROTEIN_E_Hex
	Species PROTEIN_E_Hnf6_Compartment__cell @Compartment__cell:PROTEIN_E_Hnf6() #PROTEIN_E_Hnf6
	Species PROTEIN_E_Hox_Compartment__cell @Compartment__cell:PROTEIN_E_Hox() #PROTEIN_E_Hox
	Species PROTEIN_E_Kakapo_Compartment__cell @Compartment__cell:PROTEIN_E_Kakapo() #PROTEIN_E_Kakapo
	Species PROTEIN_E_L1_Compartment__cell @Compartment__cell:PROTEIN_E_L1() #PROTEIN_E_L1
	Species PROTEIN_E_Lim_Compartment__cell @Compartment__cell:PROTEIN_E_Lim() #PROTEIN_E_Lim
	Species PROTEIN_E_Msp130_Compartment__cell @Compartment__cell:PROTEIN_E_Msp130() #PROTEIN_E_Msp130
	Species PROTEIN_E_MspL_Compartment__cell @Compartment__cell:PROTEIN_E_MspL() #PROTEIN_E_MspL
	Species PROTEIN_E_Not_Compartment__cell @Compartment__cell:PROTEIN_E_Not() #PROTEIN_E_Not
	Species PROTEIN_E_Notch_Compartment__cell @Compartment__cell:PROTEIN_E_Notch() #PROTEIN_E_Notch
	Species PROTEIN_E_Notch2_Compartment__cell @Compartment__cell:PROTEIN_E_Notch2() #PROTEIN_E_Notch2
	Species PROTEIN_E_Nrl_Compartment__cell @Compartment__cell:PROTEIN_E_Nrl() #PROTEIN_E_Nrl
	Species PROTEIN_E_OrCt_Compartment__cell @Compartment__cell:PROTEIN_E_OrCt() #PROTEIN_E_OrCt
	Species PROTEIN_E_Otx_Compartment__cell @Compartment__cell:PROTEIN_E_Otx() #PROTEIN_E_Otx
	Species PROTEIN_E_Pks_Compartment__cell @Compartment__cell:PROTEIN_E_Pks() #PROTEIN_E_Pks
	Species PROTEIN_E_Pmar1_Compartment__cell @Compartment__cell:PROTEIN_E_Pmar1() #PROTEIN_E_Pmar1
	Species PROTEIN_E_Sm27_Compartment__cell @Compartment__cell:PROTEIN_E_Sm27() #PROTEIN_E_Sm27
	Species PROTEIN_E_Sm30_Compartment__cell @Compartment__cell:PROTEIN_E_Sm30() #PROTEIN_E_Sm30
	Species PROTEIN_E_Sm50_Compartment__cell @Compartment__cell:PROTEIN_E_Sm50() #PROTEIN_E_Sm50
	Species PROTEIN_E_Snail_Compartment__cell @Compartment__cell:PROTEIN_E_Snail() #PROTEIN_E_Snail
	Species PROTEIN_E_SoxB1_Compartment__cell @Compartment__cell:PROTEIN_E_SoxB1() #PROTEIN_E_SoxB1
	Species PROTEIN_E_SoxC_Compartment__cell @Compartment__cell:PROTEIN_E_SoxC() #PROTEIN_E_SoxC
	Species PROTEIN_E_SuH_Compartment__cell @Compartment__cell:PROTEIN_E_SuH() #PROTEIN_E_SuH
	Species PROTEIN_E_SuHN_Compartment__cell @Compartment__cell:PROTEIN_E_SuHN() #PROTEIN_E_SuHN
	Species PROTEIN_E_SuTx_Compartment__cell @Compartment__cell:PROTEIN_E_SuTx() #PROTEIN_E_SuTx
	Species PROTEIN_E_TBr_Compartment__cell @Compartment__cell:PROTEIN_E_TBr() #PROTEIN_E_TBr
	Species PROTEIN_E_TCF_Compartment__cell @Compartment__cell:PROTEIN_E_TCF() #PROTEIN_E_TCF
	Species PROTEIN_E_Tel_Compartment__cell @Compartment__cell:PROTEIN_E_Tel() #PROTEIN_E_Tel
	Species PROTEIN_E_Tgif_Compartment__cell @Compartment__cell:PROTEIN_E_Tgif() #PROTEIN_E_Tgif
	Species PROTEIN_E_UMR_Compartment__cell @Compartment__cell:PROTEIN_E_UMR() #PROTEIN_E_UMR
	Species PROTEIN_E_UVAOtx_Compartment__cell @Compartment__cell:PROTEIN_E_UVAOtx() #PROTEIN_E_UVAOtx
	Species PROTEIN_E_UbiqSoxB1_Compartment__cell @Compartment__cell:PROTEIN_E_UbiqSoxB1() #PROTEIN_E_UbiqSoxB1
	Species PROTEIN_E_VEGF_Compartment__cell @Compartment__cell:PROTEIN_E_VEGF() #PROTEIN_E_VEGF
	Species PROTEIN_E_VEGFR_Compartment__cell @Compartment__cell:PROTEIN_E_VEGFR() #PROTEIN_E_VEGFR
	Species PROTEIN_E_VEGFSignal_Compartment__cell @Compartment__cell:PROTEIN_E_VEGFSignal() #PROTEIN_E_VEGFSignal
	Species PROTEIN_E_Wnt8_Compartment__cell @Compartment__cell:PROTEIN_E_Wnt8() #PROTEIN_E_Wnt8
	Species PROTEIN_E_cB_Compartment__cell @Compartment__cell:PROTEIN_E_cB() #PROTEIN_E_cB
	Species PROTEIN_E_frizzled_a_Compartment__cell @Compartment__cell:PROTEIN_E_frizzled_a() #PROTEIN_E_frizzled_a
	Species PROTEIN_E_frizzled_i_Compartment__cell @Compartment__cell:PROTEIN_E_frizzled_i() #PROTEIN_E_frizzled_i
	Species PROTEIN_E_nBTCF_Compartment__cell @Compartment__cell:PROTEIN_E_nBTCF() #PROTEIN_E_nBTCF
	Species PROTEIN_E_z13_Compartment__cell @Compartment__cell:PROTEIN_E_z13() #PROTEIN_E_z13
	Species PROTEIN_M_Alx1_Compartment__cell @Compartment__cell:PROTEIN_M_Alx1() #PROTEIN_M_Alx1
	Species PROTEIN_M_Apobec_Compartment__cell @Compartment__cell:PROTEIN_M_Apobec() #PROTEIN_M_Apobec
	Species PROTEIN_M_Blimp1_Compartment__cell @Compartment__cell:PROTEIN_M_Blimp1() #PROTEIN_M_Blimp1
	Species PROTEIN_M_Bra_Compartment__cell @Compartment__cell:PROTEIN_M_Bra() #PROTEIN_M_Bra
	Species PROTEIN_M_Brn_Compartment__cell @Compartment__cell:PROTEIN_M_Brn() #PROTEIN_M_Brn
	Species PROTEIN_M_CAPK_Compartment__cell @Compartment__cell:PROTEIN_M_CAPK() #PROTEIN_M_CAPK
	Species PROTEIN_M_CyP_Compartment__cell @Compartment__cell:PROTEIN_M_CyP() #PROTEIN_M_CyP
	Species PROTEIN_M_Delta_Compartment__cell @Compartment__cell:PROTEIN_M_Delta() #PROTEIN_M_Delta
	Species PROTEIN_M_Delta2_Compartment__cell @Compartment__cell:PROTEIN_M_Delta2() #PROTEIN_M_Delta2
	Species PROTEIN_M_Dpt_Compartment__cell @Compartment__cell:PROTEIN_M_Dpt() #PROTEIN_M_Dpt
	Species PROTEIN_M_Dri_Compartment__cell @Compartment__cell:PROTEIN_M_Dri() #PROTEIN_M_Dri
	Species PROTEIN_M_Endo16_Compartment__cell @Compartment__cell:PROTEIN_M_Endo16() #PROTEIN_M_Endo16
	Species PROTEIN_M_Erg_Compartment__cell @Compartment__cell:PROTEIN_M_Erg() #PROTEIN_M_Erg
	Species PROTEIN_M_Ets1_Compartment__cell @Compartment__cell:PROTEIN_M_Ets1() #PROTEIN_M_Ets1
	Species PROTEIN_M_Eve_Compartment__cell @Compartment__cell:PROTEIN_M_Eve() #PROTEIN_M_Eve
	Species PROTEIN_M_Ficolin_Compartment__cell @Compartment__cell:PROTEIN_M_Ficolin() #PROTEIN_M_Ficolin
	Species PROTEIN_M_FoxA_Compartment__cell @Compartment__cell:PROTEIN_M_FoxA() #PROTEIN_M_FoxA
	Species PROTEIN_M_FoxB_Compartment__cell @Compartment__cell:PROTEIN_M_FoxB() #PROTEIN_M_FoxB
	Species PROTEIN_M_FoxN23_Compartment__cell @Compartment__cell:PROTEIN_M_FoxN23() #PROTEIN_M_FoxN23
	Species PROTEIN_M_FoxO_Compartment__cell @Compartment__cell:PROTEIN_M_FoxO() #PROTEIN_M_FoxO
	Species PROTEIN_M_FvMo_Compartment__cell @Compartment__cell:PROTEIN_M_FvMo() #PROTEIN_M_FvMo
	Species PROTEIN_M_GSK3_a_Compartment__cell @Compartment__cell:PROTEIN_M_GSK3_a() #PROTEIN_M_GSK3_a
	Species PROTEIN_M_GSK3_i_Compartment__cell @Compartment__cell:PROTEIN_M_GSK3_i() #PROTEIN_M_GSK3_i
	Species PROTEIN_M_GataC_Compartment__cell @Compartment__cell:PROTEIN_M_GataC() #PROTEIN_M_GataC
	Species PROTEIN_M_GataE_Compartment__cell @Compartment__cell:PROTEIN_M_GataE() #PROTEIN_M_GataE
	Species PROTEIN_M_Gcad_Compartment__cell @Compartment__cell:PROTEIN_M_Gcad() #PROTEIN_M_Gcad
	Species PROTEIN_M_Gcm_Compartment__cell @Compartment__cell:PROTEIN_M_Gcm() #PROTEIN_M_Gcm
	Species PROTEIN_M_Gelsolin_Compartment__cell @Compartment__cell:PROTEIN_M_Gelsolin() #PROTEIN_M_Gelsolin
	Species PROTEIN_M_Gro_Compartment__cell @Compartment__cell:PROTEIN_M_Gro() #PROTEIN_M_Gro
	Species PROTEIN_M_GroTCF_Compartment__cell @Compartment__cell:PROTEIN_M_GroTCF() #PROTEIN_M_GroTCF
	Species PROTEIN_M_HesC_Compartment__cell @Compartment__cell:PROTEIN_M_HesC() #PROTEIN_M_HesC
	Species PROTEIN_M_Hex_Compartment__cell @Compartment__cell:PROTEIN_M_Hex() #PROTEIN_M_Hex
	Species PROTEIN_M_Hnf6_Compartment__cell @Compartment__cell:PROTEIN_M_Hnf6() #PROTEIN_M_Hnf6
	Species PROTEIN_M_Hox_Compartment__cell @Compartment__cell:PROTEIN_M_Hox() #PROTEIN_M_Hox
	Species PROTEIN_M_Kakapo_Compartment__cell @Compartment__cell:PROTEIN_M_Kakapo() #PROTEIN_M_Kakapo
	Species PROTEIN_M_L1_Compartment__cell @Compartment__cell:PROTEIN_M_L1() #PROTEIN_M_L1
	Species PROTEIN_M_Lim_Compartment__cell @Compartment__cell:PROTEIN_M_Lim() #PROTEIN_M_Lim
	Species PROTEIN_M_Msp130_Compartment__cell @Compartment__cell:PROTEIN_M_Msp130() #PROTEIN_M_Msp130
	Species PROTEIN_M_MspL_Compartment__cell @Compartment__cell:PROTEIN_M_MspL() #PROTEIN_M_MspL
	Species PROTEIN_M_Not_Compartment__cell @Compartment__cell:PROTEIN_M_Not() #PROTEIN_M_Not
	Species PROTEIN_M_Notch_Compartment__cell @Compartment__cell:PROTEIN_M_Notch() #PROTEIN_M_Notch
	Species PROTEIN_M_Notch2_Compartment__cell @Compartment__cell:PROTEIN_M_Notch2() #PROTEIN_M_Notch2
	Species PROTEIN_M_Nrl_Compartment__cell @Compartment__cell:PROTEIN_M_Nrl() #PROTEIN_M_Nrl
	Species PROTEIN_M_OrCt_Compartment__cell @Compartment__cell:PROTEIN_M_OrCt() #PROTEIN_M_OrCt
	Species PROTEIN_M_Otx_Compartment__cell @Compartment__cell:PROTEIN_M_Otx() #PROTEIN_M_Otx
	Species PROTEIN_M_Pks_Compartment__cell @Compartment__cell:PROTEIN_M_Pks() #PROTEIN_M_Pks
	Species PROTEIN_M_Pmar1_Compartment__cell @Compartment__cell:PROTEIN_M_Pmar1() #PROTEIN_M_Pmar1
	Species PROTEIN_M_Sm27_Compartment__cell @Compartment__cell:PROTEIN_M_Sm27() #PROTEIN_M_Sm27
	Species PROTEIN_M_Sm30_Compartment__cell @Compartment__cell:PROTEIN_M_Sm30() #PROTEIN_M_Sm30
	Species PROTEIN_M_Sm50_Compartment__cell @Compartment__cell:PROTEIN_M_Sm50() #PROTEIN_M_Sm50
	Species PROTEIN_M_Snail_Compartment__cell @Compartment__cell:PROTEIN_M_Snail() #PROTEIN_M_Snail
	Species PROTEIN_M_SoxB1_Compartment__cell @Compartment__cell:PROTEIN_M_SoxB1() #PROTEIN_M_SoxB1
	Species PROTEIN_M_SoxC_Compartment__cell @Compartment__cell:PROTEIN_M_SoxC() #PROTEIN_M_SoxC
	Species PROTEIN_M_SuH_Compartment__cell @Compartment__cell:PROTEIN_M_SuH() #PROTEIN_M_SuH
	Species PROTEIN_M_SuHN_Compartment__cell @Compartment__cell:PROTEIN_M_SuHN() #PROTEIN_M_SuHN
	Species PROTEIN_M_SuTx_Compartment__cell @Compartment__cell:PROTEIN_M_SuTx() #PROTEIN_M_SuTx
	Species PROTEIN_M_TBr_Compartment__cell @Compartment__cell:PROTEIN_M_TBr() #PROTEIN_M_TBr
	Species PROTEIN_M_TCF_Compartment__cell @Compartment__cell:PROTEIN_M_TCF() #PROTEIN_M_TCF
	Species PROTEIN_M_Tel_Compartment__cell @Compartment__cell:PROTEIN_M_Tel() #PROTEIN_M_Tel
	Species PROTEIN_M_Tgif_Compartment__cell @Compartment__cell:PROTEIN_M_Tgif() #PROTEIN_M_Tgif
	Species PROTEIN_M_UMADelta_Compartment__cell @Compartment__cell:PROTEIN_M_UMADelta() #PROTEIN_M_UMADelta
	Species PROTEIN_M_UMANrl_Compartment__cell @Compartment__cell:PROTEIN_M_UMANrl() #PROTEIN_M_UMANrl
	Species PROTEIN_M_UMR_Compartment__cell @Compartment__cell:PROTEIN_M_UMR() #PROTEIN_M_UMR
	Species PROTEIN_M_UbiqSoxB1_Compartment__cell @Compartment__cell:PROTEIN_M_UbiqSoxB1() #PROTEIN_M_UbiqSoxB1
	Species PROTEIN_M_VEGFR_Compartment__cell @Compartment__cell:PROTEIN_M_VEGFR() #PROTEIN_M_VEGFR
	Species PROTEIN_M_VEGFSignal_Compartment__cell @Compartment__cell:PROTEIN_M_VEGFSignal() #PROTEIN_M_VEGFSignal
	Species PROTEIN_M_Wnt8_Compartment__cell @Compartment__cell:PROTEIN_M_Wnt8() #PROTEIN_M_Wnt8
	Species PROTEIN_M_cB_Compartment__cell @Compartment__cell:PROTEIN_M_cB() #PROTEIN_M_cB
	Species PROTEIN_M_frizzled_a_Compartment__cell @Compartment__cell:PROTEIN_M_frizzled_a() #PROTEIN_M_frizzled_a
	Species PROTEIN_M_frizzled_i_Compartment__cell @Compartment__cell:PROTEIN_M_frizzled_i() #PROTEIN_M_frizzled_i
	Species PROTEIN_M_nBTCF_Compartment__cell @Compartment__cell:PROTEIN_M_nBTCF() #PROTEIN_M_nBTCF
	Species PROTEIN_M_z13_Compartment__cell @Compartment__cell:PROTEIN_M_z13() #PROTEIN_M_z13
	Species PROTEIN_P_Alx1_Compartment__cell @Compartment__cell:PROTEIN_P_Alx1() #PROTEIN_P_Alx1
	Species PROTEIN_P_Apobec_Compartment__cell @Compartment__cell:PROTEIN_P_Apobec() #PROTEIN_P_Apobec
	Species PROTEIN_P_Blimp1_Compartment__cell @Compartment__cell:PROTEIN_P_Blimp1() #PROTEIN_P_Blimp1
	Species PROTEIN_P_Bra_Compartment__cell @Compartment__cell:PROTEIN_P_Bra() #PROTEIN_P_Bra
	Species PROTEIN_P_Brn_Compartment__cell @Compartment__cell:PROTEIN_P_Brn() #PROTEIN_P_Brn
	Species PROTEIN_P_CAPK_Compartment__cell @Compartment__cell:PROTEIN_P_CAPK() #PROTEIN_P_CAPK
	Species PROTEIN_P_CyP_Compartment__cell @Compartment__cell:PROTEIN_P_CyP() #PROTEIN_P_CyP
	Species PROTEIN_P_Delta_Compartment__cell @Compartment__cell:PROTEIN_P_Delta() #PROTEIN_P_Delta
	Species PROTEIN_P_Delta2_Compartment__cell @Compartment__cell:PROTEIN_P_Delta2() #PROTEIN_P_Delta2
	Species PROTEIN_P_Dpt_Compartment__cell @Compartment__cell:PROTEIN_P_Dpt() #PROTEIN_P_Dpt
	Species PROTEIN_P_Dri_Compartment__cell @Compartment__cell:PROTEIN_P_Dri() #PROTEIN_P_Dri
	Species PROTEIN_P_Endo16_Compartment__cell @Compartment__cell:PROTEIN_P_Endo16() #PROTEIN_P_Endo16
	Species PROTEIN_P_Erg_Compartment__cell @Compartment__cell:PROTEIN_P_Erg() #PROTEIN_P_Erg
	Species PROTEIN_P_Ets1_Compartment__cell @Compartment__cell:PROTEIN_P_Ets1() #PROTEIN_P_Ets1
	Species PROTEIN_P_Eve_Compartment__cell @Compartment__cell:PROTEIN_P_Eve() #PROTEIN_P_Eve
	Species PROTEIN_P_Ficolin_Compartment__cell @Compartment__cell:PROTEIN_P_Ficolin() #PROTEIN_P_Ficolin
	Species PROTEIN_P_FoxA_Compartment__cell @Compartment__cell:PROTEIN_P_FoxA() #PROTEIN_P_FoxA
	Species PROTEIN_P_FoxB_Compartment__cell @Compartment__cell:PROTEIN_P_FoxB() #PROTEIN_P_FoxB
	Species PROTEIN_P_FoxN23_Compartment__cell @Compartment__cell:PROTEIN_P_FoxN23() #PROTEIN_P_FoxN23
	Species PROTEIN_P_FoxO_Compartment__cell @Compartment__cell:PROTEIN_P_FoxO() #PROTEIN_P_FoxO
	Species PROTEIN_P_FvMo_Compartment__cell @Compartment__cell:PROTEIN_P_FvMo() #PROTEIN_P_FvMo
	Species PROTEIN_P_GSK3_a_Compartment__cell @Compartment__cell:PROTEIN_P_GSK3_a() #PROTEIN_P_GSK3_a
	Species PROTEIN_P_GSK3_i_Compartment__cell @Compartment__cell:PROTEIN_P_GSK3_i() #PROTEIN_P_GSK3_i
	Species PROTEIN_P_GataC_Compartment__cell @Compartment__cell:PROTEIN_P_GataC() #PROTEIN_P_GataC
	Species PROTEIN_P_GataE_Compartment__cell @Compartment__cell:PROTEIN_P_GataE() #PROTEIN_P_GataE
	Species PROTEIN_P_Gcad_Compartment__cell @Compartment__cell:PROTEIN_P_Gcad() #PROTEIN_P_Gcad
	Species PROTEIN_P_Gcm_Compartment__cell @Compartment__cell:PROTEIN_P_Gcm() #PROTEIN_P_Gcm
	Species PROTEIN_P_Gelsolin_Compartment__cell @Compartment__cell:PROTEIN_P_Gelsolin() #PROTEIN_P_Gelsolin
	Species PROTEIN_P_Gro_Compartment__cell @Compartment__cell:PROTEIN_P_Gro() #PROTEIN_P_Gro
	Species PROTEIN_P_GroTCF_Compartment__cell @Compartment__cell:PROTEIN_P_GroTCF() #PROTEIN_P_GroTCF
	Species PROTEIN_P_HesC_Compartment__cell @Compartment__cell:PROTEIN_P_HesC() #PROTEIN_P_HesC
	Species PROTEIN_P_Hex_Compartment__cell @Compartment__cell:PROTEIN_P_Hex() #PROTEIN_P_Hex
	Species PROTEIN_P_Hnf6_Compartment__cell @Compartment__cell:PROTEIN_P_Hnf6() #PROTEIN_P_Hnf6
	Species PROTEIN_P_Hox_Compartment__cell @Compartment__cell:PROTEIN_P_Hox() #PROTEIN_P_Hox
	Species PROTEIN_P_Kakapo_Compartment__cell @Compartment__cell:PROTEIN_P_Kakapo() #PROTEIN_P_Kakapo
	Species PROTEIN_P_L1_Compartment__cell @Compartment__cell:PROTEIN_P_L1() #PROTEIN_P_L1
	Species PROTEIN_P_Lim_Compartment__cell @Compartment__cell:PROTEIN_P_Lim() #PROTEIN_P_Lim
	Species PROTEIN_P_Msp130_Compartment__cell @Compartment__cell:PROTEIN_P_Msp130() #PROTEIN_P_Msp130
	Species PROTEIN_P_MspL_Compartment__cell @Compartment__cell:PROTEIN_P_MspL() #PROTEIN_P_MspL
	Species PROTEIN_P_Not_Compartment__cell @Compartment__cell:PROTEIN_P_Not() #PROTEIN_P_Not
	Species PROTEIN_P_Notch_Compartment__cell @Compartment__cell:PROTEIN_P_Notch() #PROTEIN_P_Notch
	Species PROTEIN_P_Notch2_Compartment__cell @Compartment__cell:PROTEIN_P_Notch2() #PROTEIN_P_Notch2
	Species PROTEIN_P_Nrl_Compartment__cell @Compartment__cell:PROTEIN_P_Nrl() #PROTEIN_P_Nrl
	Species PROTEIN_P_OrCt_Compartment__cell @Compartment__cell:PROTEIN_P_OrCt() #PROTEIN_P_OrCt
	Species PROTEIN_P_Otx_Compartment__cell @Compartment__cell:PROTEIN_P_Otx() #PROTEIN_P_Otx
	Species PROTEIN_P_Pks_Compartment__cell @Compartment__cell:PROTEIN_P_Pks() #PROTEIN_P_Pks
	Species PROTEIN_P_Pmar1_Compartment__cell @Compartment__cell:PROTEIN_P_Pmar1() #PROTEIN_P_Pmar1
	Species PROTEIN_P_Sm27_Compartment__cell @Compartment__cell:PROTEIN_P_Sm27() #PROTEIN_P_Sm27
	Species PROTEIN_P_Sm30_Compartment__cell @Compartment__cell:PROTEIN_P_Sm30() #PROTEIN_P_Sm30
	Species PROTEIN_P_Sm50_Compartment__cell @Compartment__cell:PROTEIN_P_Sm50() #PROTEIN_P_Sm50
	Species PROTEIN_P_Snail_Compartment__cell @Compartment__cell:PROTEIN_P_Snail() #PROTEIN_P_Snail
	Species PROTEIN_P_SoxB1_Compartment__cell @Compartment__cell:PROTEIN_P_SoxB1() #PROTEIN_P_SoxB1
	Species PROTEIN_P_SoxC_Compartment__cell @Compartment__cell:PROTEIN_P_SoxC() #PROTEIN_P_SoxC
	Species PROTEIN_P_SuH_Compartment__cell @Compartment__cell:PROTEIN_P_SuH() #PROTEIN_P_SuH
	Species PROTEIN_P_SuHN_Compartment__cell @Compartment__cell:PROTEIN_P_SuHN() #PROTEIN_P_SuHN
	Species PROTEIN_P_SuTx_Compartment__cell @Compartment__cell:PROTEIN_P_SuTx() #PROTEIN_P_SuTx
	Species PROTEIN_P_TBr_Compartment__cell @Compartment__cell:PROTEIN_P_TBr() #PROTEIN_P_TBr
	Species PROTEIN_P_TCF_Compartment__cell @Compartment__cell:PROTEIN_P_TCF() #PROTEIN_P_TCF
	Species PROTEIN_P_Tel_Compartment__cell @Compartment__cell:PROTEIN_P_Tel() #PROTEIN_P_Tel
	Species PROTEIN_P_Tgif_Compartment__cell @Compartment__cell:PROTEIN_P_Tgif() #PROTEIN_P_Tgif
	Species PROTEIN_P_UbiqAlx1_Compartment__cell @Compartment__cell:PROTEIN_P_UbiqAlx1() #PROTEIN_P_UbiqAlx1
	Species PROTEIN_P_UbiqES_Compartment__cell @Compartment__cell:PROTEIN_P_UbiqES() #PROTEIN_P_UbiqES
	Species PROTEIN_P_UbiqEts1_Compartment__cell @Compartment__cell:PROTEIN_P_UbiqEts1() #PROTEIN_P_UbiqEts1
	Species PROTEIN_P_UbiqHesC_Compartment__cell @Compartment__cell:PROTEIN_P_UbiqHesC() #PROTEIN_P_UbiqHesC
	Species PROTEIN_P_UbiqHnf6_Compartment__cell @Compartment__cell:PROTEIN_P_UbiqHnf6() #PROTEIN_P_UbiqHnf6
	Species PROTEIN_P_UbiqSoxC_Compartment__cell @Compartment__cell:PROTEIN_P_UbiqSoxC() #PROTEIN_P_UbiqSoxC
	Species PROTEIN_P_UbiqTel_Compartment__cell @Compartment__cell:PROTEIN_P_UbiqTel() #PROTEIN_P_UbiqTel
	Species PROTEIN_P_VEGFR_Compartment__cell @Compartment__cell:PROTEIN_P_VEGFR() #PROTEIN_P_VEGFR
	Species PROTEIN_P_VEGFSignal_Compartment__cell @Compartment__cell:PROTEIN_P_VEGFSignal() #PROTEIN_P_VEGFSignal
	Species PROTEIN_P_Wnt8_Compartment__cell @Compartment__cell:PROTEIN_P_Wnt8() #PROTEIN_P_Wnt8
	Species PROTEIN_P_cB_Compartment__cell @Compartment__cell:PROTEIN_P_cB() #PROTEIN_P_cB
	Species PROTEIN_P_frizzled_a_Compartment__cell @Compartment__cell:PROTEIN_P_frizzled_a() #PROTEIN_P_frizzled_a
	Species PROTEIN_P_frizzled_i_Compartment__cell @Compartment__cell:PROTEIN_P_frizzled_i() #PROTEIN_P_frizzled_i
	Species PROTEIN_P_nBTCF_Compartment__cell @Compartment__cell:PROTEIN_P_nBTCF() #PROTEIN_P_nBTCF
	Species PROTEIN_P_z13_Compartment__cell @Compartment__cell:PROTEIN_P_z13() #PROTEIN_P_z13
	Species mRNA_E_Alx1_Compartment__cell @Compartment__cell:mRNA_E_Alx1() #mRNA_E_Alx1
	Species mRNA_E_Apobec_Compartment__cell @Compartment__cell:mRNA_E_Apobec() #mRNA_E_Apobec
	Species mRNA_E_Blimp1_Compartment__cell @Compartment__cell:mRNA_E_Blimp1() #mRNA_E_Blimp1
	Species mRNA_E_Bra_Compartment__cell @Compartment__cell:mRNA_E_Bra() #mRNA_E_Bra
	Species mRNA_E_Brn_Compartment__cell @Compartment__cell:mRNA_E_Brn() #mRNA_E_Brn
	Species mRNA_E_CAPK_Compartment__cell @Compartment__cell:mRNA_E_CAPK() #mRNA_E_CAPK
	Species mRNA_E_CyP_Compartment__cell @Compartment__cell:mRNA_E_CyP() #mRNA_E_CyP
	Species mRNA_E_Delta_Compartment__cell @Compartment__cell:mRNA_E_Delta() #mRNA_E_Delta
	Species mRNA_E_Dpt_Compartment__cell @Compartment__cell:mRNA_E_Dpt() #mRNA_E_Dpt
	Species mRNA_E_Dri_Compartment__cell @Compartment__cell:mRNA_E_Dri() #mRNA_E_Dri
	Species mRNA_E_ES_Compartment__cell @Compartment__cell:mRNA_E_ES() #mRNA_E_ES
	Species mRNA_E_Endo16_Compartment__cell @Compartment__cell:mRNA_E_Endo16() #mRNA_E_Endo16
	Species mRNA_E_Erg_Compartment__cell @Compartment__cell:mRNA_E_Erg() #mRNA_E_Erg
	Species mRNA_E_Ets1_Compartment__cell @Compartment__cell:mRNA_E_Ets1() #mRNA_E_Ets1
	Species mRNA_E_Eve_Compartment__cell @Compartment__cell:mRNA_E_Eve() #mRNA_E_Eve
	Species mRNA_E_Ficolin_Compartment__cell @Compartment__cell:mRNA_E_Ficolin() #mRNA_E_Ficolin
	Species mRNA_E_FoxA_Compartment__cell @Compartment__cell:mRNA_E_FoxA() #mRNA_E_FoxA
	Species mRNA_E_FoxB_Compartment__cell @Compartment__cell:mRNA_E_FoxB() #mRNA_E_FoxB
	Species mRNA_E_FoxN23_Compartment__cell @Compartment__cell:mRNA_E_FoxN23() #mRNA_E_FoxN23
	Species mRNA_E_FoxO_Compartment__cell @Compartment__cell:mRNA_E_FoxO() #mRNA_E_FoxO
	Species mRNA_E_FvMo_Compartment__cell @Compartment__cell:mRNA_E_FvMo() #mRNA_E_FvMo
	Species mRNA_E_GataC_Compartment__cell @Compartment__cell:mRNA_E_GataC() #mRNA_E_GataC
	Species mRNA_E_GataE_Compartment__cell @Compartment__cell:mRNA_E_GataE() #mRNA_E_GataE
	Species mRNA_E_Gcad_Compartment__cell @Compartment__cell:mRNA_E_Gcad() #mRNA_E_Gcad
	Species mRNA_E_Gcm_Compartment__cell @Compartment__cell:mRNA_E_Gcm() #mRNA_E_Gcm
	Species mRNA_E_Gelsolin_Compartment__cell @Compartment__cell:mRNA_E_Gelsolin() #mRNA_E_Gelsolin
	Species mRNA_E_HesC_Compartment__cell @Compartment__cell:mRNA_E_HesC() #mRNA_E_HesC
	Species mRNA_E_Hex_Compartment__cell @Compartment__cell:mRNA_E_Hex() #mRNA_E_Hex
	Species mRNA_E_Hnf6_Compartment__cell @Compartment__cell:mRNA_E_Hnf6() #mRNA_E_Hnf6
	Species mRNA_E_Hox_Compartment__cell @Compartment__cell:mRNA_E_Hox() #mRNA_E_Hox
	Species mRNA_E_Kakapo_Compartment__cell @Compartment__cell:mRNA_E_Kakapo() #mRNA_E_Kakapo
	Species mRNA_E_Lim_Compartment__cell @Compartment__cell:mRNA_E_Lim() #mRNA_E_Lim
	Species mRNA_E_Msp130_Compartment__cell @Compartment__cell:mRNA_E_Msp130() #mRNA_E_Msp130
	Species mRNA_E_MspL_Compartment__cell @Compartment__cell:mRNA_E_MspL() #mRNA_E_MspL
	Species mRNA_E_Not_Compartment__cell @Compartment__cell:mRNA_E_Not() #mRNA_E_Not
	Species mRNA_E_Notch_Compartment__cell @Compartment__cell:mRNA_E_Notch() #mRNA_E_Notch
	Species mRNA_E_Nrl_Compartment__cell @Compartment__cell:mRNA_E_Nrl() #mRNA_E_Nrl
	Species mRNA_E_OrCt_Compartment__cell @Compartment__cell:mRNA_E_OrCt() #mRNA_E_OrCt
	Species mRNA_E_Otx_Compartment__cell @Compartment__cell:mRNA_E_Otx() #mRNA_E_Otx
	Species mRNA_E_Pks_Compartment__cell @Compartment__cell:mRNA_E_Pks() #mRNA_E_Pks
	Species mRNA_E_Pmar1_Compartment__cell @Compartment__cell:mRNA_E_Pmar1() #mRNA_E_Pmar1
	Species mRNA_E_Sm27_Compartment__cell @Compartment__cell:mRNA_E_Sm27() #mRNA_E_Sm27
	Species mRNA_E_Sm30_Compartment__cell @Compartment__cell:mRNA_E_Sm30() #mRNA_E_Sm30
	Species mRNA_E_Sm50_Compartment__cell @Compartment__cell:mRNA_E_Sm50() #mRNA_E_Sm50
	Species mRNA_E_Snail_Compartment__cell @Compartment__cell:mRNA_E_Snail() #mRNA_E_Snail
	Species mRNA_E_SoxB1_Compartment__cell @Compartment__cell:mRNA_E_SoxB1() #mRNA_E_SoxB1
	Species mRNA_E_SoxC_Compartment__cell @Compartment__cell:mRNA_E_SoxC() #mRNA_E_SoxC
	Species mRNA_E_SuH_Compartment__cell @Compartment__cell:mRNA_E_SuH() #mRNA_E_SuH
	Species mRNA_E_SuTx_Compartment__cell @Compartment__cell:mRNA_E_SuTx() #mRNA_E_SuTx
	Species mRNA_E_TBr_Compartment__cell @Compartment__cell:mRNA_E_TBr() #mRNA_E_TBr
	Species mRNA_E_Tel_Compartment__cell @Compartment__cell:mRNA_E_Tel() #mRNA_E_Tel
	Species mRNA_E_Tgif_Compartment__cell @Compartment__cell:mRNA_E_Tgif() #mRNA_E_Tgif
	Species mRNA_E_UMR_Compartment__cell @Compartment__cell:mRNA_E_UMR() #mRNA_E_UMR
	Species mRNA_E_UVAOtx_Compartment__cell @Compartment__cell:mRNA_E_UVAOtx() #mRNA_E_UVAOtx
	Species mRNA_E_UbiqSoxB1_Compartment__cell @Compartment__cell:mRNA_E_UbiqSoxB1() #mRNA_E_UbiqSoxB1
	Species mRNA_E_VEGF_Compartment__cell @Compartment__cell:mRNA_E_VEGF() #mRNA_E_VEGF
	Species mRNA_E_VEGFR_Compartment__cell @Compartment__cell:mRNA_E_VEGFR() #mRNA_E_VEGFR
	Species mRNA_E_Wnt8_Compartment__cell @Compartment__cell:mRNA_E_Wnt8() #mRNA_E_Wnt8
	Species mRNA_E_cB_Compartment__cell @Compartment__cell:mRNA_E_cB() #mRNA_E_cB
	Species mRNA_E_z13_Compartment__cell @Compartment__cell:mRNA_E_z13() #mRNA_E_z13
	Species mRNA_M_Alx1_Compartment__cell @Compartment__cell:mRNA_M_Alx1() #mRNA_M_Alx1
	Species mRNA_M_Apobec_Compartment__cell @Compartment__cell:mRNA_M_Apobec() #mRNA_M_Apobec
	Species mRNA_M_Blimp1_Compartment__cell @Compartment__cell:mRNA_M_Blimp1() #mRNA_M_Blimp1
	Species mRNA_M_Bra_Compartment__cell @Compartment__cell:mRNA_M_Bra() #mRNA_M_Bra
	Species mRNA_M_Brn_Compartment__cell @Compartment__cell:mRNA_M_Brn() #mRNA_M_Brn
	Species mRNA_M_CAPK_Compartment__cell @Compartment__cell:mRNA_M_CAPK() #mRNA_M_CAPK
	Species mRNA_M_CyP_Compartment__cell @Compartment__cell:mRNA_M_CyP() #mRNA_M_CyP
	Species mRNA_M_Delta_Compartment__cell @Compartment__cell:mRNA_M_Delta() #mRNA_M_Delta
	Species mRNA_M_Dpt_Compartment__cell @Compartment__cell:mRNA_M_Dpt() #mRNA_M_Dpt
	Species mRNA_M_Dri_Compartment__cell @Compartment__cell:mRNA_M_Dri() #mRNA_M_Dri
	Species mRNA_M_Endo16_Compartment__cell @Compartment__cell:mRNA_M_Endo16() #mRNA_M_Endo16
	Species mRNA_M_Erg_Compartment__cell @Compartment__cell:mRNA_M_Erg() #mRNA_M_Erg
	Species mRNA_M_Ets1_Compartment__cell @Compartment__cell:mRNA_M_Ets1() #mRNA_M_Ets1
	Species mRNA_M_Eve_Compartment__cell @Compartment__cell:mRNA_M_Eve() #mRNA_M_Eve
	Species mRNA_M_Ficolin_Compartment__cell @Compartment__cell:mRNA_M_Ficolin() #mRNA_M_Ficolin
	Species mRNA_M_FoxA_Compartment__cell @Compartment__cell:mRNA_M_FoxA() #mRNA_M_FoxA
	Species mRNA_M_FoxB_Compartment__cell @Compartment__cell:mRNA_M_FoxB() #mRNA_M_FoxB
	Species mRNA_M_FoxN23_Compartment__cell @Compartment__cell:mRNA_M_FoxN23() #mRNA_M_FoxN23
	Species mRNA_M_FoxO_Compartment__cell @Compartment__cell:mRNA_M_FoxO() #mRNA_M_FoxO
	Species mRNA_M_FvMo_Compartment__cell @Compartment__cell:mRNA_M_FvMo() #mRNA_M_FvMo
	Species mRNA_M_GataC_Compartment__cell @Compartment__cell:mRNA_M_GataC() #mRNA_M_GataC
	Species mRNA_M_GataE_Compartment__cell @Compartment__cell:mRNA_M_GataE() #mRNA_M_GataE
	Species mRNA_M_Gcad_Compartment__cell @Compartment__cell:mRNA_M_Gcad() #mRNA_M_Gcad
	Species mRNA_M_Gcm_Compartment__cell @Compartment__cell:mRNA_M_Gcm() #mRNA_M_Gcm
	Species mRNA_M_Gelsolin_Compartment__cell @Compartment__cell:mRNA_M_Gelsolin() #mRNA_M_Gelsolin
	Species mRNA_M_HesC_Compartment__cell @Compartment__cell:mRNA_M_HesC() #mRNA_M_HesC
	Species mRNA_M_Hex_Compartment__cell @Compartment__cell:mRNA_M_Hex() #mRNA_M_Hex
	Species mRNA_M_Hnf6_Compartment__cell @Compartment__cell:mRNA_M_Hnf6() #mRNA_M_Hnf6
	Species mRNA_M_Hox_Compartment__cell @Compartment__cell:mRNA_M_Hox() #mRNA_M_Hox
	Species mRNA_M_Kakapo_Compartment__cell @Compartment__cell:mRNA_M_Kakapo() #mRNA_M_Kakapo
	Species mRNA_M_Lim_Compartment__cell @Compartment__cell:mRNA_M_Lim() #mRNA_M_Lim
	Species mRNA_M_Msp130_Compartment__cell @Compartment__cell:mRNA_M_Msp130() #mRNA_M_Msp130
	Species mRNA_M_MspL_Compartment__cell @Compartment__cell:mRNA_M_MspL() #mRNA_M_MspL
	Species mRNA_M_Not_Compartment__cell @Compartment__cell:mRNA_M_Not() #mRNA_M_Not
	Species mRNA_M_Notch_Compartment__cell @Compartment__cell:mRNA_M_Notch() #mRNA_M_Notch
	Species mRNA_M_Nrl_Compartment__cell @Compartment__cell:mRNA_M_Nrl() #mRNA_M_Nrl
	Species mRNA_M_OrCt_Compartment__cell @Compartment__cell:mRNA_M_OrCt() #mRNA_M_OrCt
	Species mRNA_M_Otx_Compartment__cell @Compartment__cell:mRNA_M_Otx() #mRNA_M_Otx
	Species mRNA_M_Pks_Compartment__cell @Compartment__cell:mRNA_M_Pks() #mRNA_M_Pks
	Species mRNA_M_Pmar1_Compartment__cell @Compartment__cell:mRNA_M_Pmar1() #mRNA_M_Pmar1
	Species mRNA_M_Sm27_Compartment__cell @Compartment__cell:mRNA_M_Sm27() #mRNA_M_Sm27
	Species mRNA_M_Sm30_Compartment__cell @Compartment__cell:mRNA_M_Sm30() #mRNA_M_Sm30
	Species mRNA_M_Sm50_Compartment__cell @Compartment__cell:mRNA_M_Sm50() #mRNA_M_Sm50
	Species mRNA_M_Snail_Compartment__cell @Compartment__cell:mRNA_M_Snail() #mRNA_M_Snail
	Species mRNA_M_SoxB1_Compartment__cell @Compartment__cell:mRNA_M_SoxB1() #mRNA_M_SoxB1
	Species mRNA_M_SoxC_Compartment__cell @Compartment__cell:mRNA_M_SoxC() #mRNA_M_SoxC
	Species mRNA_M_SuH_Compartment__cell @Compartment__cell:mRNA_M_SuH() #mRNA_M_SuH
	Species mRNA_M_SuTx_Compartment__cell @Compartment__cell:mRNA_M_SuTx() #mRNA_M_SuTx
	Species mRNA_M_TBr_Compartment__cell @Compartment__cell:mRNA_M_TBr() #mRNA_M_TBr
	Species mRNA_M_Tel_Compartment__cell @Compartment__cell:mRNA_M_Tel() #mRNA_M_Tel
	Species mRNA_M_Tgif_Compartment__cell @Compartment__cell:mRNA_M_Tgif() #mRNA_M_Tgif
	Species mRNA_M_UMADelta_Compartment__cell @Compartment__cell:mRNA_M_UMADelta() #mRNA_M_UMADelta
	Species mRNA_M_UMANrl_Compartment__cell @Compartment__cell:mRNA_M_UMANrl() #mRNA_M_UMANrl
	Species mRNA_M_UMR_Compartment__cell @Compartment__cell:mRNA_M_UMR() #mRNA_M_UMR
	Species mRNA_M_UbiqSoxB1_Compartment__cell @Compartment__cell:mRNA_M_UbiqSoxB1() #mRNA_M_UbiqSoxB1
	Species mRNA_M_VEGFR_Compartment__cell @Compartment__cell:mRNA_M_VEGFR() #mRNA_M_VEGFR
	Species mRNA_M_Wnt8_Compartment__cell @Compartment__cell:mRNA_M_Wnt8() #mRNA_M_Wnt8
	Species mRNA_M_cB_Compartment__cell @Compartment__cell:mRNA_M_cB() #mRNA_M_cB
	Species mRNA_M_z13_Compartment__cell @Compartment__cell:mRNA_M_z13() #mRNA_M_z13
	Species mRNA_P_Alx1_Compartment__cell @Compartment__cell:mRNA_P_Alx1() #mRNA_P_Alx1
	Species mRNA_P_Apobec_Compartment__cell @Compartment__cell:mRNA_P_Apobec() #mRNA_P_Apobec
	Species mRNA_P_Blimp1_Compartment__cell @Compartment__cell:mRNA_P_Blimp1() #mRNA_P_Blimp1
	Species mRNA_P_Bra_Compartment__cell @Compartment__cell:mRNA_P_Bra() #mRNA_P_Bra
	Species mRNA_P_Brn_Compartment__cell @Compartment__cell:mRNA_P_Brn() #mRNA_P_Brn
	Species mRNA_P_CAPK_Compartment__cell @Compartment__cell:mRNA_P_CAPK() #mRNA_P_CAPK
	Species mRNA_P_CyP_Compartment__cell @Compartment__cell:mRNA_P_CyP() #mRNA_P_CyP
	Species mRNA_P_Delta_Compartment__cell @Compartment__cell:mRNA_P_Delta() #mRNA_P_Delta
	Species mRNA_P_Dpt_Compartment__cell @Compartment__cell:mRNA_P_Dpt() #mRNA_P_Dpt
	Species mRNA_P_Dri_Compartment__cell @Compartment__cell:mRNA_P_Dri() #mRNA_P_Dri
	Species mRNA_P_Endo16_Compartment__cell @Compartment__cell:mRNA_P_Endo16() #mRNA_P_Endo16
	Species mRNA_P_Erg_Compartment__cell @Compartment__cell:mRNA_P_Erg() #mRNA_P_Erg
	Species mRNA_P_Ets1_Compartment__cell @Compartment__cell:mRNA_P_Ets1() #mRNA_P_Ets1
	Species mRNA_P_Eve_Compartment__cell @Compartment__cell:mRNA_P_Eve() #mRNA_P_Eve
	Species mRNA_P_Ficolin_Compartment__cell @Compartment__cell:mRNA_P_Ficolin() #mRNA_P_Ficolin
	Species mRNA_P_FoxA_Compartment__cell @Compartment__cell:mRNA_P_FoxA() #mRNA_P_FoxA
	Species mRNA_P_FoxB_Compartment__cell @Compartment__cell:mRNA_P_FoxB() #mRNA_P_FoxB
	Species mRNA_P_FoxN23_Compartment__cell @Compartment__cell:mRNA_P_FoxN23() #mRNA_P_FoxN23
	Species mRNA_P_FoxO_Compartment__cell @Compartment__cell:mRNA_P_FoxO() #mRNA_P_FoxO
	Species mRNA_P_FvMo_Compartment__cell @Compartment__cell:mRNA_P_FvMo() #mRNA_P_FvMo
	Species mRNA_P_GataC_Compartment__cell @Compartment__cell:mRNA_P_GataC() #mRNA_P_GataC
	Species mRNA_P_GataE_Compartment__cell @Compartment__cell:mRNA_P_GataE() #mRNA_P_GataE
	Species mRNA_P_Gcad_Compartment__cell @Compartment__cell:mRNA_P_Gcad() #mRNA_P_Gcad
	Species mRNA_P_Gcm_Compartment__cell @Compartment__cell:mRNA_P_Gcm() #mRNA_P_Gcm
	Species mRNA_P_Gelsolin_Compartment__cell @Compartment__cell:mRNA_P_Gelsolin() #mRNA_P_Gelsolin
	Species mRNA_P_HesC_Compartment__cell @Compartment__cell:mRNA_P_HesC() #mRNA_P_HesC
	Species mRNA_P_Hex_Compartment__cell @Compartment__cell:mRNA_P_Hex() #mRNA_P_Hex
	Species mRNA_P_Hnf6_Compartment__cell @Compartment__cell:mRNA_P_Hnf6() #mRNA_P_Hnf6
	Species mRNA_P_Hox_Compartment__cell @Compartment__cell:mRNA_P_Hox() #mRNA_P_Hox
	Species mRNA_P_Kakapo_Compartment__cell @Compartment__cell:mRNA_P_Kakapo() #mRNA_P_Kakapo
	Species mRNA_P_L1_Compartment__cell @Compartment__cell:mRNA_P_L1() #mRNA_P_L1
	Species mRNA_P_Lim_Compartment__cell @Compartment__cell:mRNA_P_Lim() #mRNA_P_Lim
	Species mRNA_P_Msp130_Compartment__cell @Compartment__cell:mRNA_P_Msp130() #mRNA_P_Msp130
	Species mRNA_P_MspL_Compartment__cell @Compartment__cell:mRNA_P_MspL() #mRNA_P_MspL
	Species mRNA_P_Not_Compartment__cell @Compartment__cell:mRNA_P_Not() #mRNA_P_Not
	Species mRNA_P_Nrl_Compartment__cell @Compartment__cell:mRNA_P_Nrl() #mRNA_P_Nrl
	Species mRNA_P_OrCt_Compartment__cell @Compartment__cell:mRNA_P_OrCt() #mRNA_P_OrCt
	Species mRNA_P_Otx_Compartment__cell @Compartment__cell:mRNA_P_Otx() #mRNA_P_Otx
	Species mRNA_P_Pks_Compartment__cell @Compartment__cell:mRNA_P_Pks() #mRNA_P_Pks
	Species mRNA_P_Pmar1_Compartment__cell @Compartment__cell:mRNA_P_Pmar1() #mRNA_P_Pmar1
	Species mRNA_P_Sm27_Compartment__cell @Compartment__cell:mRNA_P_Sm27() #mRNA_P_Sm27
	Species mRNA_P_Sm30_Compartment__cell @Compartment__cell:mRNA_P_Sm30() #mRNA_P_Sm30
	Species mRNA_P_Sm50_Compartment__cell @Compartment__cell:mRNA_P_Sm50() #mRNA_P_Sm50
	Species mRNA_P_Snail_Compartment__cell @Compartment__cell:mRNA_P_Snail() #mRNA_P_Snail
	Species mRNA_P_SoxB1_Compartment__cell @Compartment__cell:mRNA_P_SoxB1() #mRNA_P_SoxB1
	Species mRNA_P_SoxC_Compartment__cell @Compartment__cell:mRNA_P_SoxC() #mRNA_P_SoxC
	Species mRNA_P_SuTx_Compartment__cell @Compartment__cell:mRNA_P_SuTx() #mRNA_P_SuTx
	Species mRNA_P_TBr_Compartment__cell @Compartment__cell:mRNA_P_TBr() #mRNA_P_TBr
	Species mRNA_P_Tel_Compartment__cell @Compartment__cell:mRNA_P_Tel() #mRNA_P_Tel
	Species mRNA_P_Tgif_Compartment__cell @Compartment__cell:mRNA_P_Tgif() #mRNA_P_Tgif
	Species mRNA_P_UbiqAlx1_Compartment__cell @Compartment__cell:mRNA_P_UbiqAlx1() #mRNA_P_UbiqAlx1
	Species mRNA_P_UbiqES_Compartment__cell @Compartment__cell:mRNA_P_UbiqES() #mRNA_P_UbiqES
	Species mRNA_P_UbiqEts1_Compartment__cell @Compartment__cell:mRNA_P_UbiqEts1() #mRNA_P_UbiqEts1
	Species mRNA_P_UbiqHesC_Compartment__cell @Compartment__cell:mRNA_P_UbiqHesC() #mRNA_P_UbiqHesC
	Species mRNA_P_UbiqHnf6_Compartment__cell @Compartment__cell:mRNA_P_UbiqHnf6() #mRNA_P_UbiqHnf6
	Species mRNA_P_UbiqSoxC_Compartment__cell @Compartment__cell:mRNA_P_UbiqSoxC() #mRNA_P_UbiqSoxC
	Species mRNA_P_UbiqTel_Compartment__cell @Compartment__cell:mRNA_P_UbiqTel() #mRNA_P_UbiqTel
	Species mRNA_P_VEGFR_Compartment__cell @Compartment__cell:mRNA_P_VEGFR() #mRNA_P_VEGFR
	Species mRNA_P_Wnt8_Compartment__cell @Compartment__cell:mRNA_P_Wnt8() #mRNA_P_Wnt8
	Species mRNA_P_cB_Compartment__cell @Compartment__cell:mRNA_P_cB() #mRNA_P_cB
	Species mRNA_P_z13_Compartment__cell @Compartment__cell:mRNA_P_z13() #mRNA_P_z13
	Species none_Compartment__outside @Compartment__outside:none() #none
end observables
begin functions
	fRate0() = 10.0*E_Gcad_S1*time()^8.0/(time()^8.0 + 1.0) + 10.0*E_Gcad_S2*(1 - time()^8.0/(time()^8.0 + 214358881.0))
	fRate1() = 10.0*E_Notch_S1*time()^8.0/(time()^8.0 + 37822859361.0) + 10.0*E_Notch_S2*(1 - time()^8.0/(time()^8.0 + 656100000000.0))
	fRate2() = 10.0*E_Otx_S1*time()^8.0/(time()^8.0 + 1.0) + 10.0*E_Otx_S2*(1 - time()^8.0/(time()^8.0 + 214358881.0))
	fRate3() = 10.0*E_SoxB1_S1*time()^8.0/(time()^8.0 + 1.0) + 10.0*E_SoxB1_S2*(1 - time()^8.0/(time()^8.0 + 1475789056.0))
	fRate4() = 10.0*E_SuH_S1*time()^8.0/(time()^8.0 + 110075314176.0) + 10.0*E_SuH_S2*(1 - time()^8.0/(time()^8.0 + 656100000000.0))
	fRate5() = 10.0*E_UMR_S1*time()^8.0/(time()^8.0 + 2562890625.0) + 10.0*E_UMR_S2*(1 - time()^8.0/(time()^8.0 + 656100000000.0))
	fRate6() = 10.0*E_UVAOtx_S1*time()^8.0/(time()^8.0 + 11019960576.0) + 10.0*E_UVAOtx_S2*(1 - time()^8.0/(time()^8.0 + 656100000000.0))
	fRate7() = 10.0*E_UbiqSoxB1_S1*time()^8.0/(time()^8.0 + 1.0) + 10.0*E_UbiqSoxB1_S2*(1 - time()^8.0/(time()^8.0 + 6975757441.0))
	fRate8() = 10.0*E_VEGF_S1*time()^8.0/(time()^8.0 + 110075314176.0) + 10.0*E_VEGF_S2*(1 - time()^8.0/(time()^8.0 + 656100000000.0))
	fRate9() = 10.0*E_cB_S1*time()^8.0/(time()^8.0 + 1.0) + 10.0*E_cB_S2*(1 - time()^8.0/(time()^8.0 + 214358881.0))
	fRate10() = (1.0*PROTEIN_E_Ets1_Compartment__cell/(PROTEIN_E_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Tgif_Compartment__cell/(PROTEIN_E_Tgif_Compartment__cell + 1.0) + 1.0*PROTEIN_E_UbiqAlx1_Compartment__cell/(PROTEIN_E_UbiqAlx1_Compartment__cell + 1.0))/((PROTEIN_E_Gcm_Compartment__cell + 1.0)*(PROTEIN_E_HesC_Compartment__cell + 1.0))
	fRate11() = 1.0*PROTEIN_E_Bra_Compartment__cell/((PROTEIN_E_Bra_Compartment__cell + 1.0)*(PROTEIN_E_Hox_Compartment__cell + 1.0))
	fRate12() = (1.0*PROTEIN_E_Brn_Compartment__cell/(PROTEIN_E_Brn_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Eve_Compartment__cell/(PROTEIN_E_Eve_Compartment__cell + 1.0) + 1.0*PROTEIN_E_GataE_Compartment__cell/(PROTEIN_E_GataE_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Otx_Compartment__cell/(PROTEIN_E_Otx_Compartment__cell + 1.0) + 1.0*PROTEIN_E_nBTCF_Compartment__cell/(PROTEIN_E_nBTCF_Compartment__cell + 1.0))/((PROTEIN_E_Blimp1_Compartment__cell + 1.0)*(PROTEIN_E_GroTCF_Compartment__cell + 1.0))
	fRate13() = (1.0*PROTEIN_E_GataE_Compartment__cell/(PROTEIN_E_GataE_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Otx_Compartment__cell/(PROTEIN_E_Otx_Compartment__cell + 1.0) + 1.0*PROTEIN_E_nBTCF_Compartment__cell/(PROTEIN_E_nBTCF_Compartment__cell + 1.0))/(PROTEIN_E_GroTCF_Compartment__cell + 1.0)
	fRate14() = 1.0*PROTEIN_E_GataE_Compartment__cell/(PROTEIN_E_GataE_Compartment__cell + 1.0)
	fRate15() = (1.0*PROTEIN_E_Dri_Compartment__cell/(PROTEIN_E_Dri_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Ets1_Compartment__cell/(PROTEIN_E_Ets1_Compartment__cell + 1.0))/(PROTEIN_E_SoxB1_Compartment__cell + 1.0)
	fRate16() = (1.0*PROTEIN_E_Ets1_Compartment__cell/(PROTEIN_E_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_E_UMADelta_Compartment__cell/(PROTEIN_E_UMADelta_Compartment__cell + 1.0) + 1.0*PROTEIN_E_UbiqDelta_Compartment__cell/(PROTEIN_E_UbiqDelta_Compartment__cell + 1.0))/(PROTEIN_E_HesC_Compartment__cell + 1.0)
	fRate17() = 1.0*PROTEIN_E_Gcm_Compartment__cell/(PROTEIN_E_Gcm_Compartment__cell + 1.0)
	fRate18() = 1.0*PROTEIN_E_Alx1_Compartment__cell/(PROTEIN_E_Alx1_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Ets1_Compartment__cell/(PROTEIN_E_Ets1_Compartment__cell + 1.0)
	fRate19() = (1.0*PROTEIN_E_Dri_Compartment__cell/(PROTEIN_E_Dri_Compartment__cell + 1.0) + 1.0*PROTEIN_E_UbiqES_Compartment__cell/(PROTEIN_E_UbiqES_Compartment__cell + 1.0))/(PROTEIN_E_HesC_Compartment__cell + 1.0)
	fRate20() = 1.0*PROTEIN_E_Brn_Compartment__cell/(PROTEIN_E_Brn_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Otx_Compartment__cell/(PROTEIN_E_Otx_Compartment__cell + 1.0)
	fRate21() = 1.0*PROTEIN_E_Ets1_Compartment__cell/(PROTEIN_E_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Hex_Compartment__cell/(PROTEIN_E_Hex_Compartment__cell + 1.0) + 1.0*PROTEIN_E_TBr_Compartment__cell/(PROTEIN_E_TBr_Compartment__cell + 1.0)
	fRate22() = 1.0*PROTEIN_E_UbiqEts1_Compartment__cell/((PROTEIN_E_HesC_Compartment__cell + 1.0)*(PROTEIN_E_UbiqEts1_Compartment__cell + 1.0))
	fRate23() = (1.0*PROTEIN_E_Blimp1_Compartment__cell/(PROTEIN_E_Blimp1_Compartment__cell + 1.0) + 1.0*PROTEIN_E_nBTCF_Compartment__cell/(PROTEIN_E_nBTCF_Compartment__cell + 1.0))/((PROTEIN_E_GroTCF_Compartment__cell + 1.0)*(PROTEIN_E_Hox_Compartment__cell + 1.0))
	fRate24() = 1.0*PROTEIN_E_Erg_Compartment__cell/(PROTEIN_E_Erg_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Ets1_Compartment__cell/(PROTEIN_E_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Hex_Compartment__cell/(PROTEIN_E_Hex_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Hnf6_Compartment__cell/(PROTEIN_E_Hnf6_Compartment__cell + 1.0)
	fRate25() = (1.0*PROTEIN_E_Bra_Compartment__cell/(PROTEIN_E_Bra_Compartment__cell + 1.0) + 1.0*PROTEIN_E_GataE_Compartment__cell/(PROTEIN_E_GataE_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Otx_Compartment__cell/(PROTEIN_E_Otx_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Tgif_Compartment__cell/(PROTEIN_E_Tgif_Compartment__cell + 1.0) + 1.0*PROTEIN_E_nBTCF_Compartment__cell/(PROTEIN_E_nBTCF_Compartment__cell + 1.0))/((PROTEIN_E_FoxA_Compartment__cell + 1.0)*(PROTEIN_E_GroTFC_Compartment__cell + 1.0))
	fRate26() = (1.0*PROTEIN_E_Alx1_Compartment__cell/(PROTEIN_E_Alx1_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Dri_Compartment__cell/(PROTEIN_E_Dri_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Ets1_Compartment__cell/(PROTEIN_E_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_E_TBr_Compartment__cell/(PROTEIN_E_TBr_Compartment__cell + 1.0))/(PROTEIN_E_FoxB_Compartment__cell + 1.0)
	fRate27() = 1.0*PROTEIN_E_nBTCF_Compartment__cell/(PROTEIN_E_nBTCF_Compartment__cell + 1.0)
	fRate28() = 1.0*PROTEIN_E_Erg_Compartment__cell/(PROTEIN_E_Erg_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Ets1_Compartment__cell/(PROTEIN_E_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Hex_Compartment__cell/(PROTEIN_E_Hex_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Tgif_Compartment__cell/(PROTEIN_E_Tgif_Compartment__cell + 1.0)
	fRate29() = 1.0*PROTEIN_E_GataE_Compartment__cell/(PROTEIN_E_GataE_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Gcm_Compartment__cell/(PROTEIN_E_Gcm_Compartment__cell + 1.0)
	fRate30() = (1.0*PROTEIN_E_GataE_Compartment__cell/(PROTEIN_E_GataE_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Hnf6_Compartment__cell/(PROTEIN_E_Hnf6_Compartment__cell + 1.0) + 1.0*PROTEIN_GCM_Compartment__cell/(PROTEIN_GCM_Compartment__cell + 1.0))/(PROTEIN_E_GataC_Compartment__cell + 1.0)
	fRate31() = (1.0*PROTEIN_E_Otx_Compartment__cell/(PROTEIN_E_Otx_Compartment__cell + 1.0) + 1.0*PROTEIN_E_SuHN_Compartment__cell/(PROTEIN_E_SuHN_Compartment__cell + 1.0))/(PROTEIN_E_Hox_Compartment__cell + 1.0)
	fRate32() = 1.0*PROTEIN_E_UbiqGcad_Compartment__cell/((PROTEIN_E_Snail_Compartment__cell + 1.0)*(PROTEIN_E_UbiqGcad_Compartment__cell + 1.0))
	fRate33() = (1.0*PROTEIN_E_Gcm_Compartment__cell/(PROTEIN_E_Gcm_Compartment__cell + 1.0) + 1.0*PROTEIN_E_SuHN_Compartment__cell/(PROTEIN_E_SuHN_Compartment__cell + 1.0) + 1.0*PROTEIN_E_nBTCF_Compartment__cell/(PROTEIN_E_nBTCF_Compartment__cell + 1.0))/((PROTEIN_E_Alx1_Compartment__cell + 1.0)*(PROTEIN_E_FoxA_Compartment__cell + 1.0)*(PROTEIN_E_GroTCF_Compartment__cell + 1.0))
	fRate34() = 1.0*PROTEIN_E_Bra_Compartment__cell/(PROTEIN_E_Bra_Compartment__cell + 1.0)
	fRate35() = 1.0*PROTEIN_E_UbiqHesC_Compartment__cell/((PROTEIN_E_Pmar1_Compartment__cell + 1.0)*(PROTEIN_E_UbiqHesC_Compartment__cell + 1.0))
	fRate36() = 1.0*PROTEIN_E_Erg_Compartment__cell/(PROTEIN_E_Erg_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Ets1_Compartment__cell/(PROTEIN_E_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Tgif_Compartment__cell/(PROTEIN_E_Tgif_Compartment__cell + 1.0)
	fRate37() = 1.0*PROTEIN_E_UbiqHnf6_Compartment__cell/(PROTEIN_E_UbiqHnf6_Compartment__cell + 1.0)
	fRate38() = (1.0*PROTEIN_E_Blimp1_Compartment__cell/(PROTEIN_E_Blimp1_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Eve_Compartment__cell/(PROTEIN_E_Eve_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Otx_Compartment__cell/(PROTEIN_E_Otx_Compartment__cell + 1.0) + 1.0*PROTEIN_E_nBTCF_Compartment__cell/(PROTEIN_E_nBTCF_Compartment__cell + 1.0))/(PROTEIN_E_GroTCF_Compartment__cell + 1.0)
	fRate39() = 1.0*PROTEIN_E_Bra_Compartment__cell/(PROTEIN_E_Bra_Compartment__cell + 1.0)
	fRate40() = 1.0*PROTEIN_E_GataE_Compartment__cell/(PROTEIN_E_GataE_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Otx_Compartment__cell/(PROTEIN_E_Otx_Compartment__cell + 1.0)
	fRate41() = 1.0*PROTEIN_E_Alx1_Compartment__cell/(PROTEIN_E_Alx1_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Erg_Compartment__cell/(PROTEIN_E_Erg_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Ets1_Compartment__cell/(PROTEIN_E_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_E_FoxB_Compartment__cell/(PROTEIN_E_FoxB_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Hex_Compartment__cell/(PROTEIN_E_Hex_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Hnf6_Compartment__cell/(PROTEIN_E_Hnf6_Compartment__cell + 1.0) + 1.0*PROTEIN_E_TBr_Compartment__cell/(PROTEIN_E_TBr_Compartment__cell + 1.0)
	fRate42() = 1.0*PROTEIN_E_Alx1_Compartment__cell/(PROTEIN_E_Alx1_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Erg_Compartment__cell/(PROTEIN_E_Erg_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Ets1_Compartment__cell/(PROTEIN_E_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Hex_Compartment__cell/(PROTEIN_E_Hex_Compartment__cell + 1.0) + 1.0*PROTEIN_E_VEGFSignal_Compartment__cell/(PROTEIN_E_VEGFSignal_Compartment__cell + 1.0)
	fRate43() = 1.0*PROTEIN_E_GataE_Compartment__cell/(PROTEIN_E_GataE_Compartment__cell + 1.0)
	fRate44() = (1.0*PROTEIN_E_FoxN23_Compartment__cell/(PROTEIN_E_FoxN23_Compartment__cell + 1.0) + 1.0*PROTEIN_E_TBr_Compartment__cell/(PROTEIN_E_TBr_Compartment__cell + 1.0) + 1.0*PROTEIN_E_UMANrl_Compartment__cell/(PROTEIN_E_UMANrl_Compartment__cell + 1.0))/((PROTEIN_E_GataE_Compartment__cell + 1.0)*(PROTEIN_E_HesC_Compartment__cell + 1.0)*(PROTEIN_E_Tgif_Compartment__cell + 1.0))
	fRate45() = 1.0*PROTEIN_E_Bra_Compartment__cell/((PROTEIN_E_Bra_Compartment__cell + 1.0)*(PROTEIN_E_Hox_Compartment__cell + 1.0))
	fRate46() = 1.0*PROTEIN_E_Blimp1_Compartment__cell/(PROTEIN_E_Blimp1_Compartment__cell + 1.0) + 1.0*PROTEIN_E_GataE_Compartment__cell/(PROTEIN_E_GataE_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Otx_Compartment__cell/(PROTEIN_E_Otx_Compartment__cell + 1.0) + 1.0*PROTEIN_E_UVAOtx_Compartment__cell/(PROTEIN_E_UVAOtx_Compartment__cell + 1.0)
	fRate47() = 1.0*PROTEIN_E_GataE_Compartment__cell/(PROTEIN_E_GataE_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Gcm_Compartment__cell/(PROTEIN_E_Gcm_Compartment__cell + 1.0)
	fRate48() = (1.0*PROTEIN_E_Otx_Compartment__cell/(PROTEIN_E_Otx_Compartment__cell + 1.0) + 1.0*PROTEIN_E_nBTCF_Compartment__cell/(PROTEIN_E_nBTCF_Compartment__cell + 1.0))/(PROTEIN_E_GroTCF_Compartment__cell + 1.0)
	fRate49() = 1.0*PROTEIN_E_Alx1_Compartment__cell/(PROTEIN_E_Alx1_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Dri_Compartment__cell/(PROTEIN_E_Dri_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Erg_Compartment__cell/(PROTEIN_E_Erg_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Ets1_Compartment__cell/(PROTEIN_E_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Hex_Compartment__cell/(PROTEIN_E_Hex_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Hnf6_Compartment__cell/(PROTEIN_E_Hnf6_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Tel_Compartment__cell/(PROTEIN_E_Tel_Compartment__cell + 1.0)
	fRate50() = 1.0*PROTEIN_E_VEGFSignal_Compartment__cell/(PROTEIN_E_VEGFSignal_Compartment__cell + 1.0)
	fRate51() = 1.0*PROTEIN_E_Alx1_Compartment__cell/(PROTEIN_E_Alx1_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Dri_Compartment__cell/(PROTEIN_E_Dri_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Erg_Compartment__cell/(PROTEIN_E_Erg_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Ets1_Compartment__cell/(PROTEIN_E_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Hex_Compartment__cell/(PROTEIN_E_Hex_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Hnf6_Compartment__cell/(PROTEIN_E_Hnf6_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Tel_Compartment__cell/(PROTEIN_E_Tel_Compartment__cell + 1.0) + 1.0*PROTEIN_E_VEGFSignal_Compartment__cell/(PROTEIN_E_VEGFSignal_Compartment__cell + 1.0)
	fRate52() = 1.0*PROTEIN_E_Hex_Compartment__cell/(PROTEIN_E_Hex_Compartment__cell + 1.0)
	fRate53() = 1.0*PROTEIN_E_UbiqSoxB1_Compartment__cell/((PROTEIN_E_SoxB1_Compartment__cell + 1.0)*(PROTEIN_E_UbiqSoxB1_Compartment__cell + 1.0))
	fRate54() = 1.0*PROTEIN_E_UbiqSoxC_Compartment__cell/((PROTEIN_E_HesC_Compartment__cell + 1.0)*(PROTEIN_E_SoxC_Compartment__cell + 1.0)*(PROTEIN_E_UbiqSoxC_Compartment__cell + 1.0))
	fRate55() = 1.0*PROTEIN_E_GataE_Compartment__cell/(PROTEIN_E_GataE_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Gcm_Compartment__cell/(PROTEIN_E_Gcm_Compartment__cell + 1.0)
	fRate56() = 1.0*PROTEIN_E_Ets1_Compartment__cell/((PROTEIN_E_Ets1_Compartment__cell + 1.0)*(PROTEIN_E_HesC_Compartment__cell + 1.0)*(PROTEIN_E_TBr_Compartment__cell + 1.0))
	fRate57() = 1.0*PROTEIN_E_UbiqTel_Compartment__cell/((PROTEIN_E_HesC_Compartment__cell + 1.0)*(PROTEIN_E_Tel_Compartment__cell + 1.0)*(PROTEIN_E_UbiqTel_Compartment__cell + 1.0))
	fRate58() = 1.0*PROTEIN_E_Erg_Compartment__cell/(PROTEIN_E_Erg_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Ets1_Compartment__cell/(PROTEIN_E_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Hex_Compartment__cell/(PROTEIN_E_Hex_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Tgif_Compartment__cell/(PROTEIN_E_Tgif_Compartment__cell + 1.0)
	fRate59() = 1.0*PROTEIN_E_Alx1_Compartment__cell/(PROTEIN_E_Alx1_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Dri_Compartment__cell/(PROTEIN_E_Dri_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Ets1_Compartment__cell/(PROTEIN_E_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_E_Hex_Compartment__cell/(PROTEIN_E_Hex_Compartment__cell + 1.0)
	fRate60() = (1.0*PROTEIN_E_Blimp1_Compartment__cell/(PROTEIN_E_Blimp1_Compartment__cell + 1.0) + 1.0*PROTEIN_E_nBTCF_Compartment__cell/(PROTEIN_E_nBTCF_Compartment__cell + 1.0))/(PROTEIN_E_GroTCF_Compartment__cell + 1.0)
	fRate61() = 1.0*PROTEIN_E_nBTCF_Compartment__cell/((PROTEIN_E_GroTCF_Compartment__cell + 1.0)*(PROTEIN_E_Hnf6_Compartment__cell + 1.0)*(PROTEIN_E_nBTCF_Compartment__cell + 1.0))
	fRate62() = (1.0*PROTEIN_M_Ets1_Compartment__cell/(PROTEIN_M_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Tgif_Compartment__cell/(PROTEIN_M_Tgif_Compartment__cell + 1.0) + 1.0*PROTEIN_M_UbiqAlx1_Compartment__cell/(PROTEIN_M_UbiqAlx1_Compartment__cell + 1.0))/((PROTEIN_M_Gcm_Compartment__cell + 1.0)*(PROTEIN_M_HesC_Compartment__cell + 1.0))
	fRate63() = (1.0*PROTEIN_E_Bra_Compartment__cell/(PROTEIN_E_Bra_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Bra_Compartment__cell/(PROTEIN_M_Bra_Compartment__cell + 1.0))/(PROTEIN_M_Hox_Compartment__cell + 1.0)
	fRate64() = (1.0*PROTEIN_M_Brn_Compartment__cell/(PROTEIN_M_Brn_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Eve_Compartment__cell/(PROTEIN_M_Eve_Compartment__cell + 1.0) + 1.0*PROTEIN_M_GataE_Compartment__cell/(PROTEIN_M_GataE_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Otx_Compartment__cell/(PROTEIN_M_Otx_Compartment__cell + 1.0) + 1.0*PROTEIN_M_nBTCF_Compartment__cell/(PROTEIN_M_nBTCF_Compartment__cell + 1.0))/((PROTEIN_M_Blimp1_Compartment__cell + 1.0)*(PROTEIN_M_GroTCF_Compartment__cell + 1.0))
	fRate65() = (1.0*PROTEIN_M_GataE_Compartment__cell/(PROTEIN_M_GataE_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Otx_Compartment__cell/(PROTEIN_M_Otx_Compartment__cell + 1.0) + 1.0*PROTEIN_M_nBTCF_Compartment__cell/(PROTEIN_M_nBTCF_Compartment__cell + 1.0))/(PROTEIN_M_GroTCF_Compartment__cell + 1.0)
	fRate66() = 1.0*PROTEIN_M_GataE_Compartment__cell/(PROTEIN_M_GataE_Compartment__cell + 1.0)
	fRate67() = 1.0*PROTEIN_E_Bra_Compartment__cell/(PROTEIN_E_Bra_Compartment__cell + 1.0)
	fRate68() = (1.0*PROTEIN_M_Dri_Compartment__cell/(PROTEIN_M_Dri_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Ets1_Compartment__cell/(PROTEIN_M_Ets1_Compartment__cell + 1.0))/(PROTEIN_M_SoxB1_Compartment__cell + 1.0)
	fRate69() = (1.0*PROTEIN_M_Ets1_Compartment__cell/(PROTEIN_M_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_M_UMADelta_Compartment__cell/(PROTEIN_M_UMADelta_Compartment__cell + 1.0) + 1.0*PROTEIN_M_UbiqDelta_Compartment__cell/(PROTEIN_M_UbiqDelta_Compartment__cell + 1.0))/(PROTEIN_M_HesC_Compartment__cell + 1.0)
	fRate70() = 1.0*PROTEIN_E_Bra_Compartment__cell/(PROTEIN_E_Bra_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Gcm_Compartment__cell/(PROTEIN_M_Gcm_Compartment__cell + 1.0)
	fRate71() = 1.0*PROTEIN_M_Alx1_Compartment__cell/(PROTEIN_M_Alx1_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Ets1_Compartment__cell/(PROTEIN_M_Ets1_Compartment__cell + 1.0)
	fRate72() = 1.0*PROTEIN_M_Brn_Compartment__cell/(PROTEIN_M_Brn_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Otx_Compartment__cell/(PROTEIN_M_Otx_Compartment__cell + 1.0)
	fRate73() = 1.0*PROTEIN_M_Ets1_Compartment__cell/(PROTEIN_M_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Hex_Compartment__cell/(PROTEIN_M_Hex_Compartment__cell + 1.0) + 1.0*PROTEIN_M_TBr_Compartment__cell/(PROTEIN_M_TBr_Compartment__cell + 1.0)
	fRate74() = 1.0*PROTEIN_M_UbiqEts1_Compartment__cell/((PROTEIN_M_HesC_Compartment__cell + 1.0)*(PROTEIN_M_UbiqEts1_Compartment__cell + 1.0))
	fRate75() = (1.0*PROTEIN_M_Blimp1_Compartment__cell/(PROTEIN_M_Blimp1_Compartment__cell + 1.0) + 1.0*PROTEIN_M_nBTCF_Compartment__cell/(PROTEIN_M_nBTCF_Compartment__cell + 1.0))/((PROTEIN_M_GroTCF_Compartment__cell + 1.0)*(PROTEIN_M_Hox_Compartment__cell + 1.0))
	fRate76() = 1.0*PROTEIN_M_Erg_Compartment__cell/(PROTEIN_M_Erg_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Ets1_Compartment__cell/(PROTEIN_M_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Hex_Compartment__cell/(PROTEIN_M_Hex_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Hnf6_Compartment__cell/(PROTEIN_M_Hnf6_Compartment__cell + 1.0)
	fRate77() = (1.0*PROTEIN_M_Bra_Compartment__cell/(PROTEIN_M_Bra_Compartment__cell + 1.0) + 1.0*PROTEIN_M_GataE_Compartment__cell/(PROTEIN_M_GataE_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Otx_Compartment__cell/(PROTEIN_M_Otx_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Tgif_Compartment__cell/(PROTEIN_M_Tgif_Compartment__cell + 1.0) + 1.0*PROTEIN_M_nBTCF_Compartment__cell/(PROTEIN_M_nBTCF_Compartment__cell + 1.0))/((PROTEIN_M_FoxA_Compartment__cell + 1.0)*(PROTEIN_M_GroTFC_Compartment__cell + 1.0))
	fRate78() = (1.0*PROTEIN_M_Alx1_Compartment__cell/(PROTEIN_M_Alx1_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Dri_Compartment__cell/(PROTEIN_M_Dri_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Ets1_Compartment__cell/(PROTEIN_M_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_M_TBr_Compartment__cell/(PROTEIN_M_TBr_Compartment__cell + 1.0))/(PROTEIN_M_FoxB_Compartment__cell + 1.0)
	fRate79() = 1.0*PROTEIN_M_nBTCF_Compartment__cell/(PROTEIN_M_nBTCF_Compartment__cell + 1.0)
	fRate80() = 1.0*PROTEIN_M_Erg_Compartment__cell/(PROTEIN_M_Erg_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Ets1_Compartment__cell/(PROTEIN_M_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Hex_Compartment__cell/(PROTEIN_M_Hex_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Tgif_Compartment__cell/(PROTEIN_M_Tgif_Compartment__cell + 1.0)
	fRate81() = 1.0*PROTEIN_M_GataE_Compartment__cell/(PROTEIN_M_GataE_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Gcm_Compartment__cell/(PROTEIN_M_Gcm_Compartment__cell + 1.0)
	fRate82() = (1.0*PROTEIN_GCM_Compartment__cell/(PROTEIN_GCM_Compartment__cell + 1.0) + 1.0*PROTEIN_M_GataE_Compartment__cell/(PROTEIN_M_GataE_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Hnf6_Compartment__cell/(PROTEIN_M_Hnf6_Compartment__cell + 1.0))/(PROTEIN_M_GataC_Compartment__cell + 1.0)
	fRate83() = (1.0*PROTEIN_M_Otx_Compartment__cell/(PROTEIN_M_Otx_Compartment__cell + 1.0) + 1.0*PROTEIN_M_SuHN_Compartment__cell/(PROTEIN_M_SuHN_Compartment__cell + 1.0))/(PROTEIN_M_Hox_Compartment__cell + 1.0)
	fRate84() = 1.0*PROTEIN_M_UbiqGcad_Compartment__cell/((PROTEIN_M_Snail_Compartment__cell + 1.0)*(PROTEIN_M_UbiqGcad_Compartment__cell + 1.0))
	fRate85() = (1.0*PROTEIN_M_Gcm_Compartment__cell/(PROTEIN_M_Gcm_Compartment__cell + 1.0) + 1.0*PROTEIN_M_SuHN_Compartment__cell/(PROTEIN_M_SuHN_Compartment__cell + 1.0) + 1.0*PROTEIN_M_nBTCF_Compartment__cell/(PROTEIN_M_nBTCF_Compartment__cell + 1.0))/((PROTEIN_M_Alx1_Compartment__cell + 1.0)*(PROTEIN_M_FoxA_Compartment__cell + 1.0)*(PROTEIN_M_GroTCF_Compartment__cell + 1.0))
	fRate86() = 1.0*PROTEIN_E_Bra_Compartment__cell/(PROTEIN_E_Bra_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Bra_Compartment__cell/(PROTEIN_M_Bra_Compartment__cell + 1.0)
	fRate87() = 1.0*PROTEIN_M_UbiqHesC_Compartment__cell/((PROTEIN_M_Pmar1_Compartment__cell + 1.0)*(PROTEIN_M_UbiqHesC_Compartment__cell + 1.0))
	fRate88() = 1.0*PROTEIN_M_Erg_Compartment__cell/(PROTEIN_M_Erg_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Ets1_Compartment__cell/(PROTEIN_M_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Tgif_Compartment__cell/(PROTEIN_M_Tgif_Compartment__cell + 1.0)
	fRate89() = 1.0*PROTEIN_M_UbiqHnf6_Compartment__cell/(PROTEIN_M_UbiqHnf6_Compartment__cell + 1.0)
	fRate90() = (1.0*PROTEIN_M_Blimp1_Compartment__cell/(PROTEIN_M_Blimp1_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Eve_Compartment__cell/(PROTEIN_M_Eve_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Otx_Compartment__cell/(PROTEIN_M_Otx_Compartment__cell + 1.0) + 1.0*PROTEIN_M_nBTCF_Compartment__cell/(PROTEIN_M_nBTCF_Compartment__cell + 1.0))/(PROTEIN_M_GroTCF_Compartment__cell + 1.0)
	fRate91() = 1.0*PROTEIN_E_Bra_Compartment__cell/(PROTEIN_E_Bra_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Bra_Compartment__cell/(PROTEIN_M_Bra_Compartment__cell + 1.0)
	fRate92() = 1.0*PROTEIN_M_GataE_Compartment__cell/(PROTEIN_M_GataE_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Otx_Compartment__cell/(PROTEIN_M_Otx_Compartment__cell + 1.0)
	fRate93() = 1.0*PROTEIN_M_Alx1_Compartment__cell/(PROTEIN_M_Alx1_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Erg_Compartment__cell/(PROTEIN_M_Erg_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Ets1_Compartment__cell/(PROTEIN_M_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_M_FoxB_Compartment__cell/(PROTEIN_M_FoxB_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Hex_Compartment__cell/(PROTEIN_M_Hex_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Hnf6_Compartment__cell/(PROTEIN_M_Hnf6_Compartment__cell + 1.0) + 1.0*PROTEIN_M_TBr_Compartment__cell/(PROTEIN_M_TBr_Compartment__cell + 1.0)
	fRate94() = 1.0*PROTEIN_M_Alx1_Compartment__cell/(PROTEIN_M_Alx1_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Erg_Compartment__cell/(PROTEIN_M_Erg_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Ets1_Compartment__cell/(PROTEIN_M_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Hex_Compartment__cell/(PROTEIN_M_Hex_Compartment__cell + 1.0) + 1.0*PROTEIN_M_VEGFSignal_Compartment__cell/(PROTEIN_M_VEGFSignal_Compartment__cell + 1.0)
	fRate95() = 1.0*PROTEIN_M_GataE_Compartment__cell/(PROTEIN_M_GataE_Compartment__cell + 1.0)
	fRate96() = (1.0*PROTEIN_M_FoxN23_Compartment__cell/(PROTEIN_M_FoxN23_Compartment__cell + 1.0) + 1.0*PROTEIN_M_TBr_Compartment__cell/(PROTEIN_M_TBr_Compartment__cell + 1.0) + 1.0*PROTEIN_M_UMANrl_Compartment__cell/(PROTEIN_M_UMANrl_Compartment__cell + 1.0))/((PROTEIN_E_Bra_Compartment__cell + 1.0)*(PROTEIN_M_GataE_Compartment__cell + 1.0)*(PROTEIN_M_HesC_Compartment__cell + 1.0)*(PROTEIN_M_Tgif_Compartment__cell + 1.0))
	fRate97() = (1.0*PROTEIN_E_Bra_Compartment__cell/(PROTEIN_E_Bra_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Bra_Compartment__cell/(PROTEIN_M_Bra_Compartment__cell + 1.0))/(PROTEIN_M_Hox_Compartment__cell + 1.0)
	fRate98() = 1.0*PROTEIN_M_Blimp1_Compartment__cell/(PROTEIN_M_Blimp1_Compartment__cell + 1.0) + 1.0*PROTEIN_M_GataE_Compartment__cell/(PROTEIN_M_GataE_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Otx_Compartment__cell/(PROTEIN_M_Otx_Compartment__cell + 1.0) + 1.0*PROTEIN_M_UVAOtx_Compartment__cell/(PROTEIN_M_UVAOtx_Compartment__cell + 1.0)
	fRate99() = 1.0*PROTEIN_E_Bra_Compartment__cell/(PROTEIN_E_Bra_Compartment__cell + 1.0) + 1.0*PROTEIN_M_GataE_Compartment__cell/(PROTEIN_M_GataE_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Gcm_Compartment__cell/(PROTEIN_M_Gcm_Compartment__cell + 1.0)
	fRate100() = (1.0*PROTEIN_M_Otx_Compartment__cell/(PROTEIN_M_Otx_Compartment__cell + 1.0) + 1.0*PROTEIN_M_nBTCF_Compartment__cell/(PROTEIN_M_nBTCF_Compartment__cell + 1.0))/(PROTEIN_M_GroTCF_Compartment__cell + 1.0)
	fRate101() = 1.0*PROTEIN_M_Alx1_Compartment__cell/(PROTEIN_M_Alx1_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Dri_Compartment__cell/(PROTEIN_M_Dri_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Erg_Compartment__cell/(PROTEIN_M_Erg_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Ets1_Compartment__cell/(PROTEIN_M_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Hex_Compartment__cell/(PROTEIN_M_Hex_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Hnf6_Compartment__cell/(PROTEIN_M_Hnf6_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Tel_Compartment__cell/(PROTEIN_M_Tel_Compartment__cell + 1.0)
	fRate102() = 1.0*PROTEIN_M_VEGFSignal_Compartment__cell/(PROTEIN_M_VEGFSignal_Compartment__cell + 1.0)
	fRate103() = 1.0*PROTEIN_M_Alx1_Compartment__cell/(PROTEIN_M_Alx1_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Dri_Compartment__cell/(PROTEIN_M_Dri_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Erg_Compartment__cell/(PROTEIN_M_Erg_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Ets1_Compartment__cell/(PROTEIN_M_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Hex_Compartment__cell/(PROTEIN_M_Hex_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Hnf6_Compartment__cell/(PROTEIN_M_Hnf6_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Tel_Compartment__cell/(PROTEIN_M_Tel_Compartment__cell + 1.0) + 1.0*PROTEIN_M_VEGFSignal_Compartment__cell/(PROTEIN_M_VEGFSignal_Compartment__cell + 1.0)
	fRate104() = 1.0*PROTEIN_M_Hex_Compartment__cell/(PROTEIN_M_Hex_Compartment__cell + 1.0)
	fRate105() = 1.0*PROTEIN_M_UbiqSoxB1_Compartment__cell/((PROTEIN_M_SoxB1_Compartment__cell + 1.0)*(PROTEIN_M_UbiqSoxB1_Compartment__cell + 1.0))
	fRate106() = 1.0*PROTEIN_M_UbiqSoxC_Compartment__cell/((PROTEIN_M_HesC_Compartment__cell + 1.0)*(PROTEIN_M_SoxC_Compartment__cell + 1.0)*(PROTEIN_M_UbiqSoxC_Compartment__cell + 1.0))
	fRate107() = 1.0*PROTEIN_M_GataE_Compartment__cell/(PROTEIN_M_GataE_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Gcm_Compartment__cell/(PROTEIN_M_Gcm_Compartment__cell + 1.0)
	fRate108() = 1.0*PROTEIN_M_Ets1_Compartment__cell/((PROTEIN_M_Ets1_Compartment__cell + 1.0)*(PROTEIN_M_HesC_Compartment__cell + 1.0)*(PROTEIN_M_TBr_Compartment__cell + 1.0))
	fRate109() = 1.0*PROTEIN_M_UbiqTel_Compartment__cell/((PROTEIN_M_HesC_Compartment__cell + 1.0)*(PROTEIN_M_Tel_Compartment__cell + 1.0)*(PROTEIN_M_UbiqTel_Compartment__cell + 1.0))
	fRate110() = 1.0*PROTEIN_M_Erg_Compartment__cell/(PROTEIN_M_Erg_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Ets1_Compartment__cell/(PROTEIN_M_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Hex_Compartment__cell/(PROTEIN_M_Hex_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Tgif_Compartment__cell/(PROTEIN_M_Tgif_Compartment__cell + 1.0)
	fRate111() = 1.0*PROTEIN_M_Alx1_Compartment__cell/(PROTEIN_M_Alx1_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Dri_Compartment__cell/(PROTEIN_M_Dri_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Ets1_Compartment__cell/(PROTEIN_M_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_M_Hex_Compartment__cell/(PROTEIN_M_Hex_Compartment__cell + 1.0)
	fRate112() = (1.0*PROTEIN_M_Blimp1_Compartment__cell/(PROTEIN_M_Blimp1_Compartment__cell + 1.0) + 1.0*PROTEIN_M_nBTCF_Compartment__cell/(PROTEIN_M_nBTCF_Compartment__cell + 1.0))/(PROTEIN_M_GroTCF_Compartment__cell + 1.0)
	fRate113() = 1.0*PROTEIN_M_nBTCF_Compartment__cell/((PROTEIN_M_GroTCF_Compartment__cell + 1.0)*(PROTEIN_M_Hnf6_Compartment__cell + 1.0)*(PROTEIN_M_nBTCF_Compartment__cell + 1.0))
	fRate114() = (1.0*PROTEIN_P_Ets1_Compartment__cell/(PROTEIN_P_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Tgif_Compartment__cell/(PROTEIN_P_Tgif_Compartment__cell + 1.0) + 1.0*PROTEIN_P_UbiqAlx1_Compartment__cell/(PROTEIN_P_UbiqAlx1_Compartment__cell + 1.0))/((PROTEIN_P_Gcm_Compartment__cell + 1.0)*(PROTEIN_P_HesC_Compartment__cell + 1.0))
	fRate115() = 1.0*PROTEIN_P_Bra_Compartment__cell/((PROTEIN_P_Bra_Compartment__cell + 1.0)*(PROTEIN_P_Hox_Compartment__cell + 1.0))
	fRate116() = (1.0*PROTEIN_P_Brn_Compartment__cell/(PROTEIN_P_Brn_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Eve_Compartment__cell/(PROTEIN_P_Eve_Compartment__cell + 1.0) + 1.0*PROTEIN_P_GataE_Compartment__cell/(PROTEIN_P_GataE_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Otx_Compartment__cell/(PROTEIN_P_Otx_Compartment__cell + 1.0) + 1.0*PROTEIN_P_nBTCF_Compartment__cell/(PROTEIN_P_nBTCF_Compartment__cell + 1.0))/((PROTEIN_P_Blimp1_Compartment__cell + 1.0)*(PROTEIN_P_GroTCF_Compartment__cell + 1.0))
	fRate117() = (1.0*PROTEIN_P_GataE_Compartment__cell/(PROTEIN_P_GataE_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Otx_Compartment__cell/(PROTEIN_P_Otx_Compartment__cell + 1.0) + 1.0*PROTEIN_P_nBTCF_Compartment__cell/(PROTEIN_P_nBTCF_Compartment__cell + 1.0))/(PROTEIN_P_GroTCF_Compartment__cell + 1.0)
	fRate118() = 1.0*PROTEIN_P_GataE_Compartment__cell/(PROTEIN_P_GataE_Compartment__cell + 1.0)
	fRate119() = (1.0*PROTEIN_P_Dri_Compartment__cell/(PROTEIN_P_Dri_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Ets1_Compartment__cell/(PROTEIN_P_Ets1_Compartment__cell + 1.0))/(PROTEIN_P_SoxB1_Compartment__cell + 1.0)
	fRate120() = (1.0*PROTEIN_P_Ets1_Compartment__cell/(PROTEIN_P_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_P_UMADelta_Compartment__cell/(PROTEIN_P_UMADelta_Compartment__cell + 1.0) + 1.0*PROTEIN_P_UbiqDelta_Compartment__cell/(PROTEIN_P_UbiqDelta_Compartment__cell + 1.0))/(PROTEIN_P_HesC_Compartment__cell + 1.0)
	fRate121() = 1.0*PROTEIN_P_Gcm_Compartment__cell/(PROTEIN_P_Gcm_Compartment__cell + 1.0)
	fRate122() = 1.0*PROTEIN_P_Alx1_Compartment__cell/(PROTEIN_P_Alx1_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Ets1_Compartment__cell/(PROTEIN_P_Ets1_Compartment__cell + 1.0)
	fRate123() = 1.0*PROTEIN_P_Brn_Compartment__cell/(PROTEIN_P_Brn_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Otx_Compartment__cell/(PROTEIN_P_Otx_Compartment__cell + 1.0)
	fRate124() = 1.0*PROTEIN_P_Ets1_Compartment__cell/(PROTEIN_P_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Hex_Compartment__cell/(PROTEIN_P_Hex_Compartment__cell + 1.0) + 1.0*PROTEIN_P_TBr_Compartment__cell/(PROTEIN_P_TBr_Compartment__cell + 1.0)
	fRate125() = 1.0*PROTEIN_P_UbiqEts1_Compartment__cell/((PROTEIN_P_HesC_Compartment__cell + 1.0)*(PROTEIN_P_UbiqEts1_Compartment__cell + 1.0))
	fRate126() = (1.0*PROTEIN_P_Blimp1_Compartment__cell/(PROTEIN_P_Blimp1_Compartment__cell + 1.0) + 1.0*PROTEIN_P_nBTCF_Compartment__cell/(PROTEIN_P_nBTCF_Compartment__cell + 1.0))/((PROTEIN_P_GroTCF_Compartment__cell + 1.0)*(PROTEIN_P_Hox_Compartment__cell + 1.0))
	fRate127() = 1.0*PROTEIN_P_Erg_Compartment__cell/(PROTEIN_P_Erg_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Ets1_Compartment__cell/(PROTEIN_P_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Hex_Compartment__cell/(PROTEIN_P_Hex_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Hnf6_Compartment__cell/(PROTEIN_P_Hnf6_Compartment__cell + 1.0)
	fRate128() = (1.0*PROTEIN_P_Bra_Compartment__cell/(PROTEIN_P_Bra_Compartment__cell + 1.0) + 1.0*PROTEIN_P_GataE_Compartment__cell/(PROTEIN_P_GataE_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Otx_Compartment__cell/(PROTEIN_P_Otx_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Tgif_Compartment__cell/(PROTEIN_P_Tgif_Compartment__cell + 1.0) + 1.0*PROTEIN_P_nBTCF_Compartment__cell/(PROTEIN_P_nBTCF_Compartment__cell + 1.0))/((PROTEIN_P_FoxA_Compartment__cell + 1.0)*(PROTEIN_P_GroTFC_Compartment__cell + 1.0))
	fRate129() = (1.0*PROTEIN_P_Alx1_Compartment__cell/(PROTEIN_P_Alx1_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Dri_Compartment__cell/(PROTEIN_P_Dri_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Ets1_Compartment__cell/(PROTEIN_P_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_P_TBr_Compartment__cell/(PROTEIN_P_TBr_Compartment__cell + 1.0))/(PROTEIN_P_FoxB_Compartment__cell + 1.0)
	fRate130() = 1.0*PROTEIN_P_nBTCF_Compartment__cell/(PROTEIN_P_nBTCF_Compartment__cell + 1.0)
	fRate131() = 1.0*PROTEIN_P_Erg_Compartment__cell/(PROTEIN_P_Erg_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Ets1_Compartment__cell/(PROTEIN_P_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Hex_Compartment__cell/(PROTEIN_P_Hex_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Tgif_Compartment__cell/(PROTEIN_P_Tgif_Compartment__cell + 1.0)
	fRate132() = 1.0*PROTEIN_P_GataE_Compartment__cell/(PROTEIN_P_GataE_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Gcm_Compartment__cell/(PROTEIN_P_Gcm_Compartment__cell + 1.0)
	fRate133() = (1.0*PROTEIN_GCM_Compartment__cell/(PROTEIN_GCM_Compartment__cell + 1.0) + 1.0*PROTEIN_P_GataE_Compartment__cell/(PROTEIN_P_GataE_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Hnf6_Compartment__cell/(PROTEIN_P_Hnf6_Compartment__cell + 1.0))/(PROTEIN_P_GataC_Compartment__cell + 1.0)
	fRate134() = (1.0*PROTEIN_P_Otx_Compartment__cell/(PROTEIN_P_Otx_Compartment__cell + 1.0) + 1.0*PROTEIN_P_SuHN_Compartment__cell/(PROTEIN_P_SuHN_Compartment__cell + 1.0))/(PROTEIN_P_Hox_Compartment__cell + 1.0)
	fRate135() = 1.0*PROTEIN_P_UbiqGcad_Compartment__cell/((PROTEIN_P_Snail_Compartment__cell + 1.0)*(PROTEIN_P_UbiqGcad_Compartment__cell + 1.0))
	fRate136() = (1.0*PROTEIN_P_Gcm_Compartment__cell/(PROTEIN_P_Gcm_Compartment__cell + 1.0) + 1.0*PROTEIN_P_SuHN_Compartment__cell/(PROTEIN_P_SuHN_Compartment__cell + 1.0) + 1.0*PROTEIN_P_nBTCF_Compartment__cell/(PROTEIN_P_nBTCF_Compartment__cell + 1.0))/((PROTEIN_P_Alx1_Compartment__cell + 1.0)*(PROTEIN_P_FoxA_Compartment__cell + 1.0)*(PROTEIN_P_GroTCF_Compartment__cell + 1.0))
	fRate137() = 1.0*PROTEIN_P_Bra_Compartment__cell/(PROTEIN_P_Bra_Compartment__cell + 1.0)
	fRate138() = 1.0*PROTEIN_P_UbiqHesC_Compartment__cell/((PROTEIN_P_Pmar1_Compartment__cell + 1.0)*(PROTEIN_P_UbiqHesC_Compartment__cell + 1.0))
	fRate139() = 1.0*PROTEIN_P_Erg_Compartment__cell/(PROTEIN_P_Erg_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Ets1_Compartment__cell/(PROTEIN_P_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Tgif_Compartment__cell/(PROTEIN_P_Tgif_Compartment__cell + 1.0)
	fRate140() = 1.0*PROTEIN_P_UbiqHnf6_Compartment__cell/(PROTEIN_P_UbiqHnf6_Compartment__cell + 1.0)
	fRate141() = (1.0*PROTEIN_P_Blimp1_Compartment__cell/(PROTEIN_P_Blimp1_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Eve_Compartment__cell/(PROTEIN_P_Eve_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Otx_Compartment__cell/(PROTEIN_P_Otx_Compartment__cell + 1.0) + 1.0*PROTEIN_P_nBTCF_Compartment__cell/(PROTEIN_P_nBTCF_Compartment__cell + 1.0))/(PROTEIN_P_GroTCF_Compartment__cell + 1.0)
	fRate142() = 1.0*PROTEIN_P_Bra_Compartment__cell/(PROTEIN_P_Bra_Compartment__cell + 1.0)
	fRate143() = 1.0*PROTEIN_P_GataE_Compartment__cell/(PROTEIN_P_GataE_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Otx_Compartment__cell/(PROTEIN_P_Otx_Compartment__cell + 1.0)
	fRate144() = 1.0*PROTEIN_P_Alx1_Compartment__cell/(PROTEIN_P_Alx1_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Erg_Compartment__cell/(PROTEIN_P_Erg_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Ets1_Compartment__cell/(PROTEIN_P_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_P_FoxB_Compartment__cell/(PROTEIN_P_FoxB_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Hex_Compartment__cell/(PROTEIN_P_Hex_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Hnf6_Compartment__cell/(PROTEIN_P_Hnf6_Compartment__cell + 1.0) + 1.0*PROTEIN_P_TBr_Compartment__cell/(PROTEIN_P_TBr_Compartment__cell + 1.0)
	fRate145() = 1.0*PROTEIN_P_Alx1_Compartment__cell/(PROTEIN_P_Alx1_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Erg_Compartment__cell/(PROTEIN_P_Erg_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Ets1_Compartment__cell/(PROTEIN_P_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Hex_Compartment__cell/(PROTEIN_P_Hex_Compartment__cell + 1.0) + 1.0*PROTEIN_P_VEGFSignal_Compartment__cell/(PROTEIN_P_VEGFSignal_Compartment__cell + 1.0)
	fRate146() = 1.0*PROTEIN_P_GataE_Compartment__cell/(PROTEIN_P_GataE_Compartment__cell + 1.0)
	fRate147() = (1.0*PROTEIN_P_FoxN23_Compartment__cell/(PROTEIN_P_FoxN23_Compartment__cell + 1.0) + 1.0*PROTEIN_P_TBr_Compartment__cell/(PROTEIN_P_TBr_Compartment__cell + 1.0) + 1.0*PROTEIN_P_UMANrl_Compartment__cell/(PROTEIN_P_UMANrl_Compartment__cell + 1.0))/((PROTEIN_P_GataE_Compartment__cell + 1.0)*(PROTEIN_P_HesC_Compartment__cell + 1.0)*(PROTEIN_P_Tgif_Compartment__cell + 1.0))
	fRate148() = 1.0*PROTEIN_P_Bra_Compartment__cell/((PROTEIN_P_Bra_Compartment__cell + 1.0)*(PROTEIN_P_Hox_Compartment__cell + 1.0))
	fRate149() = 1.0*PROTEIN_P_Blimp1_Compartment__cell/(PROTEIN_P_Blimp1_Compartment__cell + 1.0) + 1.0*PROTEIN_P_GataE_Compartment__cell/(PROTEIN_P_GataE_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Otx_Compartment__cell/(PROTEIN_P_Otx_Compartment__cell + 1.0) + 1.0*PROTEIN_P_UVAOtx_Compartment__cell/(PROTEIN_P_UVAOtx_Compartment__cell + 1.0)
	fRate150() = 1.0*PROTEIN_P_GataE_Compartment__cell/(PROTEIN_P_GataE_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Gcm_Compartment__cell/(PROTEIN_P_Gcm_Compartment__cell + 1.0)
	fRate151() = (1.0*PROTEIN_P_Otx_Compartment__cell/(PROTEIN_P_Otx_Compartment__cell + 1.0) + 1.0*PROTEIN_P_nBTCF_Compartment__cell/(PROTEIN_P_nBTCF_Compartment__cell + 1.0))/(PROTEIN_P_GroTCF_Compartment__cell + 1.0)
	fRate152() = 1.0*PROTEIN_P_Alx1_Compartment__cell/(PROTEIN_P_Alx1_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Dri_Compartment__cell/(PROTEIN_P_Dri_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Erg_Compartment__cell/(PROTEIN_P_Erg_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Ets1_Compartment__cell/(PROTEIN_P_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Hex_Compartment__cell/(PROTEIN_P_Hex_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Hnf6_Compartment__cell/(PROTEIN_P_Hnf6_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Tel_Compartment__cell/(PROTEIN_P_Tel_Compartment__cell + 1.0)
	fRate153() = 1.0*PROTEIN_P_VEGFSignal_Compartment__cell/(PROTEIN_P_VEGFSignal_Compartment__cell + 1.0)
	fRate154() = 1.0*PROTEIN_P_Alx1_Compartment__cell/(PROTEIN_P_Alx1_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Dri_Compartment__cell/(PROTEIN_P_Dri_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Erg_Compartment__cell/(PROTEIN_P_Erg_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Ets1_Compartment__cell/(PROTEIN_P_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Hex_Compartment__cell/(PROTEIN_P_Hex_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Hnf6_Compartment__cell/(PROTEIN_P_Hnf6_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Tel_Compartment__cell/(PROTEIN_P_Tel_Compartment__cell + 1.0) + 1.0*PROTEIN_P_VEGFSignal_Compartment__cell/(PROTEIN_P_VEGFSignal_Compartment__cell + 1.0)
	fRate155() = 1.0*PROTEIN_P_Hex_Compartment__cell/(PROTEIN_P_Hex_Compartment__cell + 1.0)
	fRate156() = 1.0*PROTEIN_P_UbiqSoxB1_Compartment__cell/((PROTEIN_P_SoxB1_Compartment__cell + 1.0)*(PROTEIN_P_UbiqSoxB1_Compartment__cell + 1.0))
	fRate157() = 1.0*PROTEIN_P_UbiqSoxC_Compartment__cell/((PROTEIN_P_HesC_Compartment__cell + 1.0)*(PROTEIN_P_SoxC_Compartment__cell + 1.0)*(PROTEIN_P_UbiqSoxC_Compartment__cell + 1.0))
	fRate158() = 1.0*PROTEIN_P_GataE_Compartment__cell/(PROTEIN_P_GataE_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Gcm_Compartment__cell/(PROTEIN_P_Gcm_Compartment__cell + 1.0)
	fRate159() = 1.0*PROTEIN_P_Ets1_Compartment__cell/((PROTEIN_P_Ets1_Compartment__cell + 1.0)*(PROTEIN_P_HesC_Compartment__cell + 1.0)*(PROTEIN_P_TBr_Compartment__cell + 1.0))
	fRate160() = 1.0*PROTEIN_P_UbiqTel_Compartment__cell/((PROTEIN_P_HesC_Compartment__cell + 1.0)*(PROTEIN_P_Tel_Compartment__cell + 1.0)*(PROTEIN_P_UbiqTel_Compartment__cell + 1.0))
	fRate161() = 1.0*PROTEIN_P_Erg_Compartment__cell/(PROTEIN_P_Erg_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Ets1_Compartment__cell/(PROTEIN_P_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Hex_Compartment__cell/(PROTEIN_P_Hex_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Tgif_Compartment__cell/(PROTEIN_P_Tgif_Compartment__cell + 1.0)
	fRate162() = 1.0*PROTEIN_P_Alx1_Compartment__cell/(PROTEIN_P_Alx1_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Dri_Compartment__cell/(PROTEIN_P_Dri_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Ets1_Compartment__cell/(PROTEIN_P_Ets1_Compartment__cell + 1.0) + 1.0*PROTEIN_P_Hex_Compartment__cell/(PROTEIN_P_Hex_Compartment__cell + 1.0)
	fRate163() = (1.0*PROTEIN_P_Blimp1_Compartment__cell/(PROTEIN_P_Blimp1_Compartment__cell + 1.0) + 1.0*PROTEIN_P_nBTCF_Compartment__cell/(PROTEIN_P_nBTCF_Compartment__cell + 1.0))/(PROTEIN_P_GroTCF_Compartment__cell + 1.0)
	fRate164() = 1.0*PROTEIN_P_nBTCF_Compartment__cell/((PROTEIN_P_GroTCF_Compartment__cell + 1.0)*(PROTEIN_P_Hnf6_Compartment__cell + 1.0)*(PROTEIN_P_nBTCF_Compartment__cell + 1.0))
	fRate165() = 10.0*M_Gcad_S1*time()^8.0/(time()^8.0 + 1.0) + 10.0*M_Gcad_S2*(1 - time()^8.0/(time()^8.0 + 25600000000.0))
	fRate166() = 10.0*M_Notch_S1*time()^8.0/(time()^8.0 + 1.0) + 10.0*M_Notch_S2*(1 - time()^8.0/(time()^8.0 + 656100000000.0))
	fRate167() = 10.0*M_Otx_S1*time()^8.0/(time()^8.0 + 1.0) + 10.0*M_Otx_S2*(1 - time()^8.0/(time()^8.0 + 214358881.0))
	fRate168() = 10.0*M_SoxB1_S1*time()^8.0/(time()^8.0 + 1.0) + 10.0*M_SoxB1_S2*(1 - time()^8.0/(time()^8.0 + 1475789056.0))
	fRate169() = 10.0*M_SuH_S1*time()^8.0/(time()^8.0 + 429981696.0) + 10.0*M_SuH_S2*(1 - time()^8.0/(time()^8.0 + 656100000000.0))
	fRate170() = 10.0*M_UMADelta_S1*time()^8.0/(time()^8.0 + 16983563041.0) + 10.0*M_UMADelta_S2*(1 - time()^8.0/(time()^8.0 + 656100000000.0))
	fRate171() = 10.0*M_UMANrl_S1*time()^8.0/(time()^8.0 + 110075314176.0) + 10.0*M_UMANrl_S2*(1 - time()^8.0/(time()^8.0 + 656100000000.0))
	fRate172() = 10.0*M_UMR_S1*time()^8.0/(time()^8.0 + 2562890625.0) + 10.0*M_UMR_S2*(1 - time()^8.0/(time()^8.0 + 656100000000.0))
	fRate173() = 10.0*M_UbiqSoxB1_S1*time()^8.0/(time()^8.0 + 1.0) + 10.0*M_UbiqSoxB1_S2*(1 - time()^8.0/(time()^8.0 + 1475789056.0))
	fRate174() = 10.0*M_cB_S1*time()^8.0/(time()^8.0 + 1.0) + 10.0*M_cB_S2*(1 - time()^8.0/(time()^8.0 + 214358881.0))
	fRate182() = 0.435536193237*PROTEIN_E_Nrl_Compartment__cell
	fRate198() = 0.358248719321*PROTEIN_E_frizzled_a_Compartment__cell
	fRate216() = 0.683876854591*PROTEIN_E_Delta2_Compartment__cell
	fRate245() = 0.882551015859*PROTEIN_E_GSK3_a_Compartment__cell
	fRate247() = 0.851147549911*PROTEIN_E_Wnt8_Compartment__cell
	fRate259() = 0.435536193237*PROTEIN_M_Nrl_Compartment__cell
	fRate274() = 0.358248719321*PROTEIN_M_frizzled_a_Compartment__cell
	fRate292() = 0.683876854591*PROTEIN_M_Delta2_Compartment__cell
	fRate321() = 0.882551015859*PROTEIN_M_GSK3_a_Compartment__cell
	fRate323() = 0.851147549911*PROTEIN_M_Wnt8_Compartment__cell
	fRate335() = 0.435536193237*PROTEIN_P_Nrl_Compartment__cell
	fRate350() = 0.358248719321*PROTEIN_P_frizzled_a_Compartment__cell
	fRate369() = 0.683876854591*PROTEIN_P_Delta2_Compartment__cell
	fRate399() = 0.882551015859*PROTEIN_P_GSK3_a_Compartment__cell
	fRate401() = 0.851147549911*PROTEIN_P_Wnt8_Compartment__cell
	fRate406() = 10.0*P_Ets1_S1*time()^8.0/(time()^8.0 + 1.0) + 10.0*P_Ets1_S2*(1 - time()^8.0/(time()^8.0 + 214358881.0))
	fRate407() = 10.0*P_Gcad_S1*time()^8.0/(time()^8.0 + 1.0) + 10.0*P_Gcad_S2*(1 - time()^8.0/(time()^8.0 + 25600000000.0))
	fRate408() = 10.0*P_L1_S1*time()^8.0/(time()^8.0 + 37822859361.0) + 10.0*P_L1_S2*(1 - time()^8.0/(time()^8.0 + 656100000000.0))
	fRate409() = 10.0*P_Otx_S1*time()^8.0/(time()^8.0 + 1.0) + 10.0*P_Otx_S2*(1 - time()^8.0/(time()^8.0 + 2562890625.0))
	fRate410() = 10.0*P_UbiqAlx1_S1*time()^8.0/(time()^8.0 + 1.0) + 10.0*P_UbiqAlx1_S2*(1 - time()^8.0/(time()^8.0 + 656100000000.0))
	fRate411() = 10.0*P_UbiqES_S1*time()^8.0/(time()^8.0 + 1.0) + 10.0*P_UbiqES_S2*(1 - time()^8.0/(time()^8.0 + 25600000000.0))
	fRate412() = 10.0*P_UbiqEts1_S1*time()^8.0/(time()^8.0 + 1.0) + 10.0*P_UbiqEts1_S2*(1 - time()^8.0/(time()^8.0 + 656100000000.0))
	fRate413() = 10.0*P_UbiqHesC_S1*time()^8.0/(time()^8.0 + 1.0) + 10.0*P_UbiqHesC_S2*(1 - time()^8.0/(time()^8.0 + 16777216.0))
	fRate414() = 10.0*P_UbiqHnf6_S1*time()^8.0/(time()^8.0 + 1.0) + 10.0*P_UbiqHnf6_S2*(1 - time()^8.0/(time()^8.0 + 78310985281.0))
	fRate415() = 10.0*P_UbiqSoxC_S1*time()^8.0/(time()^8.0 + 1.0) + 10.0*P_UbiqSoxC_S2*(1 - time()^8.0/(time()^8.0 + 6975757441.0))
	fRate416() = 10.0*P_UbiqTel_S1*time()^8.0/(time()^8.0 + 1.0) + 10.0*P_UbiqTel_S2*(1 - time()^8.0/(time()^8.0 + 500246412961.0))
	fRate417() = 10.0*P_cB_S1*time()^8.0/(time()^8.0 + 1.0) + 10.0*P_cB_S2*(1 - time()^8.0/(time()^8.0 + 1475789056.0))
	fRate419() = 2.0*mRNA_E_Alx1_Compartment__cell
	fRate421() = 2.0*mRNA_E_Apobec_Compartment__cell
	fRate423() = 2.0*mRNA_E_Blimp1_Compartment__cell
	fRate425() = 2.0*mRNA_E_Bra_Compartment__cell
	fRate427() = 2.0*mRNA_E_Brn_Compartment__cell
	fRate429() = 2.0*mRNA_E_CAPK_Compartment__cell
	fRate431() = 2.0*mRNA_E_CyP_Compartment__cell
	fRate433() = 2.0*mRNA_E_Delta_Compartment__cell
	fRate435() = 2.0*mRNA_E_Dpt_Compartment__cell
	fRate437() = 2.0*mRNA_E_Dri_Compartment__cell
	fRate439() = 2.0*mRNA_E_ES_Compartment__cell
	fRate441() = 2.0*mRNA_E_Endo16_Compartment__cell
	fRate443() = 2.0*mRNA_E_Erg_Compartment__cell
	fRate445() = 2.0*mRNA_E_Ets1_Compartment__cell
	fRate447() = 2.0*mRNA_E_Eve_Compartment__cell
	fRate449() = 2.0*mRNA_E_Ficolin_Compartment__cell
	fRate451() = 2.0*mRNA_E_FoxA_Compartment__cell
	fRate453() = 2.0*mRNA_E_FoxB_Compartment__cell
	fRate455() = 2.0*mRNA_E_FoxN23_Compartment__cell
	fRate457() = 2.0*mRNA_E_FoxO_Compartment__cell
	fRate459() = 2.0*mRNA_E_FvMo_Compartment__cell
	fRate461() = 2.0*mRNA_E_GataC_Compartment__cell
	fRate463() = 2.0*mRNA_E_GataE_Compartment__cell
	fRate465() = 2.0*mRNA_E_Gcad_Compartment__cell
	fRate467() = 2.0*mRNA_E_Gcm_Compartment__cell
	fRate469() = 2.0*mRNA_E_Gelsolin_Compartment__cell
	fRate471() = 2.0*mRNA_E_HesC_Compartment__cell
	fRate473() = 2.0*mRNA_E_Hex_Compartment__cell
	fRate475() = 2.0*mRNA_E_Hnf6_Compartment__cell
	fRate477() = 2.0*mRNA_E_Hox_Compartment__cell
	fRate479() = 2.0*mRNA_E_Kakapo_Compartment__cell
	fRate481() = 2.0*mRNA_E_Lim_Compartment__cell
	fRate483() = 2.0*mRNA_E_Msp130_Compartment__cell
	fRate485() = 2.0*mRNA_E_MspL_Compartment__cell
	fRate487() = 2.0*mRNA_E_Not_Compartment__cell
	fRate489() = 2.0*mRNA_E_Notch_Compartment__cell
	fRate491() = 2.0*mRNA_E_Nrl_Compartment__cell
	fRate493() = 2.0*mRNA_E_OrCt_Compartment__cell
	fRate495() = 2.0*mRNA_E_Otx_Compartment__cell
	fRate497() = 2.0*mRNA_E_Pks_Compartment__cell
	fRate499() = 2.0*mRNA_E_Pmar1_Compartment__cell
	fRate501() = 2.0*mRNA_E_Sm27_Compartment__cell
	fRate503() = 2.0*mRNA_E_Sm30_Compartment__cell
	fRate505() = 2.0*mRNA_E_Sm50_Compartment__cell
	fRate507() = 2.0*mRNA_E_Snail_Compartment__cell
	fRate509() = 2.0*mRNA_E_SoxB1_Compartment__cell
	fRate511() = 2.0*mRNA_E_SoxC_Compartment__cell
	fRate513() = 2.0*mRNA_E_SuH_Compartment__cell
	fRate515() = 2.0*mRNA_E_SuTx_Compartment__cell
	fRate517() = 2.0*mRNA_E_TBr_Compartment__cell
	fRate519() = 2.0*mRNA_E_Tel_Compartment__cell
	fRate521() = 2.0*mRNA_E_Tgif_Compartment__cell
	fRate523() = 2.0*mRNA_E_UMR_Compartment__cell
	fRate525() = 2.0*mRNA_E_UVAOtx_Compartment__cell
	fRate527() = 2.0*mRNA_E_UbiqSoxB1_Compartment__cell
	fRate529() = 2.0*mRNA_E_VEGFR_Compartment__cell
	fRate531() = 2.0*mRNA_E_VEGF_Compartment__cell
	fRate533() = 2.0*mRNA_E_Wnt8_Compartment__cell
	fRate535() = 2.0*mRNA_E_cB_Compartment__cell
	fRate537() = 2.0*mRNA_E_z13_Compartment__cell
	fRate539() = 2.0*mRNA_M_Alx1_Compartment__cell
	fRate541() = 2.0*mRNA_M_Apobec_Compartment__cell
	fRate543() = 2.0*mRNA_M_Blimp1_Compartment__cell
	fRate545() = 2.0*mRNA_M_Bra_Compartment__cell
	fRate547() = 2.0*mRNA_M_Brn_Compartment__cell
	fRate549() = 2.0*mRNA_M_CAPK_Compartment__cell
	fRate551() = 2.0*mRNA_M_CyP_Compartment__cell
	fRate553() = 2.0*mRNA_M_Delta_Compartment__cell
	fRate555() = 2.0*mRNA_M_Dpt_Compartment__cell
	fRate557() = 2.0*mRNA_M_Dri_Compartment__cell
	fRate559() = 2.0*mRNA_M_Endo16_Compartment__cell
	fRate561() = 2.0*mRNA_M_Erg_Compartment__cell
	fRate563() = 2.0*mRNA_M_Ets1_Compartment__cell
	fRate565() = 2.0*mRNA_M_Eve_Compartment__cell
	fRate567() = 2.0*mRNA_M_Ficolin_Compartment__cell
	fRate569() = 2.0*mRNA_M_FoxA_Compartment__cell
	fRate571() = 2.0*mRNA_M_FoxB_Compartment__cell
	fRate573() = 2.0*mRNA_M_FoxN23_Compartment__cell
	fRate575() = 2.0*mRNA_M_FoxO_Compartment__cell
	fRate577() = 2.0*mRNA_M_FvMo_Compartment__cell
	fRate579() = 2.0*mRNA_M_GataC_Compartment__cell
	fRate581() = 2.0*mRNA_M_GataE_Compartment__cell
	fRate583() = 2.0*mRNA_M_Gcad_Compartment__cell
	fRate585() = 2.0*mRNA_M_Gcm_Compartment__cell
	fRate587() = 2.0*mRNA_M_Gelsolin_Compartment__cell
	fRate589() = 2.0*mRNA_M_HesC_Compartment__cell
	fRate591() = 2.0*mRNA_M_Hex_Compartment__cell
	fRate593() = 2.0*mRNA_M_Hnf6_Compartment__cell
	fRate595() = 2.0*mRNA_M_Hox_Compartment__cell
	fRate597() = 2.0*mRNA_M_Kakapo_Compartment__cell
	fRate599() = 2.0*mRNA_M_Lim_Compartment__cell
	fRate601() = 2.0*mRNA_M_Msp130_Compartment__cell
	fRate603() = 2.0*mRNA_M_MspL_Compartment__cell
	fRate605() = 2.0*mRNA_M_Not_Compartment__cell
	fRate607() = 2.0*mRNA_M_Notch_Compartment__cell
	fRate609() = 2.0*mRNA_M_Nrl_Compartment__cell
	fRate611() = 2.0*mRNA_M_OrCt_Compartment__cell
	fRate613() = 2.0*mRNA_M_Otx_Compartment__cell
	fRate615() = 2.0*mRNA_M_Pks_Compartment__cell
	fRate617() = 2.0*mRNA_M_Pmar1_Compartment__cell
	fRate619() = 2.0*mRNA_M_Sm27_Compartment__cell
	fRate621() = 2.0*mRNA_M_Sm30_Compartment__cell
	fRate623() = 2.0*mRNA_M_Sm50_Compartment__cell
	fRate625() = 2.0*mRNA_M_Snail_Compartment__cell
	fRate627() = 2.0*mRNA_M_SoxB1_Compartment__cell
	fRate629() = 2.0*mRNA_M_SoxC_Compartment__cell
	fRate631() = 2.0*mRNA_M_SuH_Compartment__cell
	fRate633() = 2.0*mRNA_M_SuTx_Compartment__cell
	fRate635() = 2.0*mRNA_M_TBr_Compartment__cell
	fRate637() = 2.0*mRNA_M_Tel_Compartment__cell
	fRate639() = 2.0*mRNA_M_Tgif_Compartment__cell
	fRate641() = 2.0*mRNA_M_UMADelta_Compartment__cell
	fRate643() = 2.0*mRNA_M_UMANrl_Compartment__cell
	fRate645() = 2.0*mRNA_M_UMR_Compartment__cell
	fRate647() = 2.0*mRNA_M_UbiqSoxB1_Compartment__cell
	fRate649() = 2.0*mRNA_M_VEGFR_Compartment__cell
	fRate651() = 2.0*mRNA_M_Wnt8_Compartment__cell
	fRate653() = 2.0*mRNA_M_cB_Compartment__cell
	fRate655() = 2.0*mRNA_M_z13_Compartment__cell
	fRate657() = 2.0*mRNA_P_Alx1_Compartment__cell
	fRate659() = 2.0*mRNA_P_Apobec_Compartment__cell
	fRate661() = 2.0*mRNA_P_Blimp1_Compartment__cell
	fRate663() = 2.0*mRNA_P_Bra_Compartment__cell
	fRate665() = 2.0*mRNA_P_Brn_Compartment__cell
	fRate667() = 2.0*mRNA_P_CAPK_Compartment__cell
	fRate669() = 2.0*mRNA_P_CyP_Compartment__cell
	fRate671() = 2.0*mRNA_P_Delta_Compartment__cell
	fRate673() = 2.0*mRNA_P_Dpt_Compartment__cell
	fRate675() = 2.0*mRNA_P_Dri_Compartment__cell
	fRate677() = 2.0*mRNA_P_Endo16_Compartment__cell
	fRate679() = 2.0*mRNA_P_Erg_Compartment__cell
	fRate681() = 2.0*mRNA_P_Ets1_Compartment__cell
	fRate683() = 2.0*mRNA_P_Eve_Compartment__cell
	fRate685() = 2.0*mRNA_P_Ficolin_Compartment__cell
	fRate687() = 2.0*mRNA_P_FoxA_Compartment__cell
	fRate689() = 2.0*mRNA_P_FoxB_Compartment__cell
	fRate691() = 2.0*mRNA_P_FoxN23_Compartment__cell
	fRate693() = 2.0*mRNA_P_FoxO_Compartment__cell
	fRate695() = 2.0*mRNA_P_FvMo_Compartment__cell
	fRate697() = 2.0*mRNA_P_GataC_Compartment__cell
	fRate699() = 2.0*mRNA_P_GataE_Compartment__cell
	fRate701() = 2.0*mRNA_P_Gcad_Compartment__cell
	fRate703() = 2.0*mRNA_P_Gcm_Compartment__cell
	fRate705() = 2.0*mRNA_P_Gelsolin_Compartment__cell
	fRate707() = 2.0*mRNA_P_HesC_Compartment__cell
	fRate709() = 2.0*mRNA_P_Hex_Compartment__cell
	fRate711() = 2.0*mRNA_P_Hnf6_Compartment__cell
	fRate713() = 2.0*mRNA_P_Hox_Compartment__cell
	fRate715() = 2.0*mRNA_P_Kakapo_Compartment__cell
	fRate717() = 2.0*mRNA_P_L1_Compartment__cell
	fRate719() = 2.0*mRNA_P_Lim_Compartment__cell
	fRate721() = 2.0*mRNA_P_Msp130_Compartment__cell
	fRate723() = 2.0*mRNA_P_MspL_Compartment__cell
	fRate725() = 2.0*mRNA_P_Not_Compartment__cell
	fRate727() = 2.0*mRNA_P_Nrl_Compartment__cell
	fRate729() = 2.0*mRNA_P_OrCt_Compartment__cell
	fRate731() = 2.0*mRNA_P_Otx_Compartment__cell
	fRate733() = 2.0*mRNA_P_Pks_Compartment__cell
	fRate735() = 2.0*mRNA_P_Pmar1_Compartment__cell
	fRate737() = 2.0*mRNA_P_Sm27_Compartment__cell
	fRate739() = 2.0*mRNA_P_Sm30_Compartment__cell
	fRate741() = 2.0*mRNA_P_Sm50_Compartment__cell
	fRate743() = 2.0*mRNA_P_Snail_Compartment__cell
	fRate745() = 2.0*mRNA_P_SoxB1_Compartment__cell
	fRate747() = 2.0*mRNA_P_SoxC_Compartment__cell
	fRate749() = 2.0*mRNA_P_SuTx_Compartment__cell
	fRate751() = 2.0*mRNA_P_TBr_Compartment__cell
	fRate753() = 2.0*mRNA_P_Tel_Compartment__cell
	fRate755() = 2.0*mRNA_P_Tgif_Compartment__cell
	fRate757() = 2.0*mRNA_P_UbiqAlx1_Compartment__cell
	fRate759() = 2.0*mRNA_P_UbiqES_Compartment__cell
	fRate761() = 2.0*mRNA_P_UbiqEts1_Compartment__cell
	fRate763() = 2.0*mRNA_P_UbiqHesC_Compartment__cell
	fRate765() = 2.0*mRNA_P_UbiqHnf6_Compartment__cell
	fRate767() = 2.0*mRNA_P_UbiqSoxC_Compartment__cell
	fRate769() = 2.0*mRNA_P_UbiqTel_Compartment__cell
	fRate771() = 2.0*mRNA_P_VEGFR_Compartment__cell
	fRate773() = 2.0*mRNA_P_Wnt8_Compartment__cell
	fRate775() = 2.0*mRNA_P_cB_Compartment__cell
	fRate777() = 2.0*mRNA_P_z13_Compartment__cell
end functions
begin reaction rules
	E_Gcad_Hill_Kinetic_0_reactants_0: 0  -> PRE_E_Gcad()@Compartment__cell -1*(fRate0())
	E_Gcad_Hill_Kinetic_0_products_0: 0  -> mRNA_E_Gcad()@Compartment__cell fRate0()
	E_Notch_Hill_Kinetic_0_reactants_0: 0  -> PRE_E_Notch()@Compartment__cell -1*(fRate1())
	E_Notch_Hill_Kinetic_0_products_0: 0  -> mRNA_E_Notch()@Compartment__cell fRate1()
	E_Otx_Hill_Kinetic_0_reactants_0: 0  -> PRE_E_Otx()@Compartment__cell -1*(fRate2())
	E_Otx_Hill_Kinetic_0_products_0: 0  -> mRNA_E_Otx()@Compartment__cell fRate2()
	E_SoxB1_Hill_Kinetic_0_reactants_0: 0  -> PRE_E_SoxB1()@Compartment__cell -1*(fRate3())
	E_SoxB1_Hill_Kinetic_0_products_0: 0  -> mRNA_E_SoxB1()@Compartment__cell fRate3()
	E_SuH_Hill_Kinetic_0_reactants_0: 0  -> PRE_E_SuH()@Compartment__cell -1*(fRate4())
	E_SuH_Hill_Kinetic_0_products_0: 0  -> mRNA_E_SuH()@Compartment__cell fRate4()
	E_UMR_Hill_Kinetic_0_reactants_0: 0  -> PRE_E_UMR()@Compartment__cell -1*(fRate5())
	E_UMR_Hill_Kinetic_0_products_0: 0  -> mRNA_E_UMR()@Compartment__cell fRate5()
	E_UVAOtx_Hill_Kinetic_0_reactants_0: 0  -> PRE_E_UVAOtx()@Compartment__cell -1*(fRate6())
	E_UVAOtx_Hill_Kinetic_0_products_0: 0  -> mRNA_E_UVAOtx()@Compartment__cell fRate6()
	E_UbiqSoxB1_Hill_Kinetic_0_reactants_0: 0  -> PRE_E_UbiqSoxB1()@Compartment__cell -1*(fRate7())
	E_UbiqSoxB1_Hill_Kinetic_0_products_0: 0  -> mRNA_E_UbiqSoxB1()@Compartment__cell fRate7()
	E_VEGF_Hill_Kinetic_0_reactants_0: 0  -> PRE_E_VEGF()@Compartment__cell -1*(fRate8())
	E_VEGF_Hill_Kinetic_0_products_0: 0  -> mRNA_E_VEGF()@Compartment__cell fRate8()
	E_cB_Hill_Kinetic_0_reactants_0: 0  -> PRE_E_cB()@Compartment__cell -1*(fRate9())
	E_cB_Hill_Kinetic_0_products_0: 0  -> mRNA_E_cB()@Compartment__cell fRate9()
	GENE_E_Alx1_transcription_0_reactants_0: 0  -> GENE_E_Alx1()@Compartment__cell -1*(fRate10()) #Modifiers(PROTEIN_E_Ets1, PROTEIN_E_UbiqAlx1, PROTEIN_E_Tgif, PROTEIN_E_Gcm, PROTEIN_E_HesC)
	GENE_E_Alx1_transcription_0_products_0: 0  -> mRNA_E_Alx1()@Compartment__cell fRate10() #Modifiers(PROTEIN_E_Ets1, PROTEIN_E_UbiqAlx1, PROTEIN_E_Tgif, PROTEIN_E_Gcm, PROTEIN_E_HesC)
	GENE_E_Apobec_transcription_0_reactants_0: 0  -> GENE_E_Apobec()@Compartment__cell -1*(fRate11()) #Modifiers(PROTEIN_E_Bra, PROTEIN_E_Hox)
	GENE_E_Apobec_transcription_0_products_0: 0  -> mRNA_E_Apobec()@Compartment__cell fRate11() #Modifiers(PROTEIN_E_Bra, PROTEIN_E_Hox)
	GENE_E_Blimp1_transcription_0_reactants_0: 0  -> GENE_E_Blimp1()@Compartment__cell -1*(fRate12()) #Modifiers(PROTEIN_E_Otx, PROTEIN_E_Brn, PROTEIN_E_GataE, PROTEIN_E_nBTCF, PROTEIN_E_Eve, PROTEIN_E_Blimp1, PROTEIN_E_GroTCF)
	GENE_E_Blimp1_transcription_0_products_0: 0  -> mRNA_E_Blimp1()@Compartment__cell fRate12() #Modifiers(PROTEIN_E_Otx, PROTEIN_E_Brn, PROTEIN_E_GataE, PROTEIN_E_nBTCF, PROTEIN_E_Eve, PROTEIN_E_Blimp1, PROTEIN_E_GroTCF)
	GENE_E_Bra_transcription_0_reactants_0: 0  -> GENE_E_Bra()@Compartment__cell -1*(fRate13()) #Modifiers(PROTEIN_E_GataE, PROTEIN_E_nBTCF, PROTEIN_E_Otx, PROTEIN_E_GroTCF)
	GENE_E_Bra_transcription_0_products_0: 0  -> mRNA_E_Bra()@Compartment__cell fRate13() #Modifiers(PROTEIN_E_GataE, PROTEIN_E_nBTCF, PROTEIN_E_Otx, PROTEIN_E_GroTCF)
	GENE_E_Brn_transcription_0_reactants_0: 0  -> GENE_E_Brn()@Compartment__cell -1*(fRate14()) #Modifiers(PROTEIN_E_GataE)
	GENE_E_Brn_transcription_0_products_0: 0  -> mRNA_E_Brn()@Compartment__cell fRate14() #Modifiers(PROTEIN_E_GataE)
	GENE_E_CyP_transcription_0_reactants_0: 0  -> GENE_E_CyP()@Compartment__cell -1*(fRate15()) #Modifiers(PROTEIN_E_Dri, PROTEIN_E_Ets1, PROTEIN_E_SoxB1)
	GENE_E_CyP_transcription_0_products_0: 0  -> mRNA_E_CyP()@Compartment__cell fRate15() #Modifiers(PROTEIN_E_Dri, PROTEIN_E_Ets1, PROTEIN_E_SoxB1)
	GENE_E_Delta_transcription_0_reactants_0: 0  -> GENE_E_Delta()@Compartment__cell -1*(fRate16()) #Modifiers(PROTEIN_E_UbiqDelta, PROTEIN_E_UMADelta, PROTEIN_E_Ets1, PROTEIN_E_HesC)
	GENE_E_Delta_transcription_0_products_0: 0  -> mRNA_E_Delta()@Compartment__cell fRate16() #Modifiers(PROTEIN_E_UbiqDelta, PROTEIN_E_UMADelta, PROTEIN_E_Ets1, PROTEIN_E_HesC)
	GENE_E_Dpt_transcription_0_reactants_0: 0  -> GENE_E_Dpt()@Compartment__cell -1*(fRate17()) #Modifiers(PROTEIN_E_Gcm)
	GENE_E_Dpt_transcription_0_products_0: 0  -> mRNA_E_Dpt()@Compartment__cell fRate17() #Modifiers(PROTEIN_E_Gcm)
	GENE_E_Dri_transcription_0_reactants_0: 0  -> GENE_E_Dri()@Compartment__cell -1*(fRate18()) #Modifiers(PROTEIN_E_Alx1, PROTEIN_E_Ets1)
	GENE_E_Dri_transcription_0_products_0: 0  -> mRNA_E_Dri()@Compartment__cell fRate18() #Modifiers(PROTEIN_E_Alx1, PROTEIN_E_Ets1)
	GENE_E_ES_transcription_0_reactants_0: 0  -> GENE_E_ES()@Compartment__cell -1*(fRate19()) #Modifiers(PROTEIN_E_Dri, PROTEIN_E_UbiqES, PROTEIN_E_HesC)
	GENE_E_ES_transcription_0_products_0: 0  -> mRNA_E_ES()@Compartment__cell fRate19() #Modifiers(PROTEIN_E_Dri, PROTEIN_E_UbiqES, PROTEIN_E_HesC)
	GENE_E_Endo16_transcription_0_reactants_0: 0  -> GENE_E_Endo16()@Compartment__cell -1*(fRate20()) #Modifiers(PROTEIN_E_Otx, PROTEIN_E_Brn)
	GENE_E_Endo16_transcription_0_products_0: 0  -> mRNA_E_Endo16()@Compartment__cell fRate20() #Modifiers(PROTEIN_E_Otx, PROTEIN_E_Brn)
	GENE_E_Erg_transcription_0_reactants_0: 0  -> GENE_E_Erg()@Compartment__cell -1*(fRate21()) #Modifiers(PROTEIN_E_TBr, PROTEIN_E_Ets1, PROTEIN_E_Hex)
	GENE_E_Erg_transcription_0_products_0: 0  -> mRNA_E_Erg()@Compartment__cell fRate21() #Modifiers(PROTEIN_E_TBr, PROTEIN_E_Ets1, PROTEIN_E_Hex)
	GENE_E_Ets1_transcription_0_reactants_0: 0  -> GENE_E_Ets1()@Compartment__cell -1*(fRate22()) #Modifiers(PROTEIN_E_UbiqEts1, PROTEIN_E_HesC)
	GENE_E_Ets1_transcription_0_products_0: 0  -> mRNA_E_Ets1()@Compartment__cell fRate22() #Modifiers(PROTEIN_E_UbiqEts1, PROTEIN_E_HesC)
	GENE_E_Eve_transcription_0_reactants_0: 0  -> GENE_E_Eve()@Compartment__cell -1*(fRate23()) #Modifiers(PROTEIN_E_Blimp1, PROTEIN_E_nBTCF, PROTEIN_E_GroTCF, PROTEIN_E_Hox)
	GENE_E_Eve_transcription_0_products_0: 0  -> mRNA_E_Eve()@Compartment__cell fRate23() #Modifiers(PROTEIN_E_Blimp1, PROTEIN_E_nBTCF, PROTEIN_E_GroTCF, PROTEIN_E_Hox)
	GENE_E_Ficolin_transcription_0_reactants_0: 0  -> GENE_E_Ficolin()@Compartment__cell -1*(fRate24()) #Modifiers(PROTEIN_E_Ets1, PROTEIN_E_Hnf6, PROTEIN_E_Hex, PROTEIN_E_Erg)
	GENE_E_Ficolin_transcription_0_products_0: 0  -> mRNA_E_Ficolin()@Compartment__cell fRate24() #Modifiers(PROTEIN_E_Ets1, PROTEIN_E_Hnf6, PROTEIN_E_Hex, PROTEIN_E_Erg)
	GENE_E_FoxA_transcription_0_reactants_0: 0  -> GENE_E_FoxA()@Compartment__cell -1*(fRate25()) #Modifiers(PROTEIN_E_GataE, PROTEIN_E_nBTCF, PROTEIN_E_Otx, PROTEIN_E_Bra, PROTEIN_E_Tgif, PROTEIN_E_GroTFC, PROTEIN_E_FoxA)
	GENE_E_FoxA_transcription_0_products_0: 0  -> mRNA_E_FoxA()@Compartment__cell fRate25() #Modifiers(PROTEIN_E_GataE, PROTEIN_E_nBTCF, PROTEIN_E_Otx, PROTEIN_E_Bra, PROTEIN_E_Tgif, PROTEIN_E_GroTFC, PROTEIN_E_FoxA)
	GENE_E_FoxB_transcription_0_reactants_0: 0  -> GENE_E_FoxB()@Compartment__cell -1*(fRate26()) #Modifiers(PROTEIN_E_Alx1, PROTEIN_E_Ets1, PROTEIN_E_TBr, PROTEIN_E_Dri, PROTEIN_E_FoxB)
	GENE_E_FoxB_transcription_0_products_0: 0  -> mRNA_E_FoxB()@Compartment__cell fRate26() #Modifiers(PROTEIN_E_Alx1, PROTEIN_E_Ets1, PROTEIN_E_TBr, PROTEIN_E_Dri, PROTEIN_E_FoxB)
	GENE_E_FoxN23_transcription_0_reactants_0: 0  -> GENE_E_FoxN23()@Compartment__cell -1*(fRate27()) #Modifiers(PROTEIN_E_nBTCF)
	GENE_E_FoxN23_transcription_0_products_0: 0  -> mRNA_E_FoxN23()@Compartment__cell fRate27() #Modifiers(PROTEIN_E_nBTCF)
	GENE_E_FoxO_transcription_0_reactants_0: 0  -> GENE_E_FoxO()@Compartment__cell -1*(fRate28()) #Modifiers(PROTEIN_E_Ets1, PROTEIN_E_Hex, PROTEIN_E_Tgif, PROTEIN_E_Erg)
	GENE_E_FoxO_transcription_0_products_0: 0  -> mRNA_E_FoxO()@Compartment__cell fRate28() #Modifiers(PROTEIN_E_Ets1, PROTEIN_E_Hex, PROTEIN_E_Tgif, PROTEIN_E_Erg)
	GENE_E_FvMo_transcription_0_reactants_0: 0  -> GENE_E_FvMo()@Compartment__cell -1*(fRate29()) #Modifiers(PROTEIN_E_Gcm, PROTEIN_E_GataE)
	GENE_E_FvMo_transcription_0_products_0: 0  -> mRNA_E_FvMo()@Compartment__cell fRate29() #Modifiers(PROTEIN_E_Gcm, PROTEIN_E_GataE)
	GENE_E_GataC_transcription_0_reactants_0: 0  -> GENE_E_GataC()@Compartment__cell -1*(fRate30()) #Modifiers(PROTEIN_E_GataE, PROTEIN_E_Hnf6, PROTEIN_GCM, PROTEIN_E_GataC)
	GENE_E_GataC_transcription_0_products_0: 0  -> mRNA_E_GataC()@Compartment__cell fRate30() #Modifiers(PROTEIN_E_GataE, PROTEIN_E_Hnf6, PROTEIN_GCM, PROTEIN_E_GataC)
	GENE_E_GataE_transcription_0_reactants_0: 0  -> GENE_E_GataE()@Compartment__cell -1*(fRate31()) #Modifiers(PROTEIN_E_Otx, PROTEIN_E_SuHN, PROTEIN_E_Hox)
	GENE_E_GataE_transcription_0_products_0: 0  -> mRNA_E_GataE()@Compartment__cell fRate31() #Modifiers(PROTEIN_E_Otx, PROTEIN_E_SuHN, PROTEIN_E_Hox)
	GENE_E_Gcad_transcription_0_reactants_0: 0  -> GENE_E_Gcad()@Compartment__cell -1*(fRate32()) #Modifiers(PROTEIN_E_UbiqGcad, PROTEIN_E_Snail)
	GENE_E_Gcad_transcription_0_products_0: 0  -> mRNA_E_Gcad()@Compartment__cell fRate32() #Modifiers(PROTEIN_E_UbiqGcad, PROTEIN_E_Snail)
	GENE_E_Gcm_transcription_0_reactants_0: 0  -> GENE_E_Gcm()@Compartment__cell -1*(fRate33()) #Modifiers(PROTEIN_E_nBTCF, PROTEIN_E_SuHN, PROTEIN_E_Gcm, PROTEIN_E_GroTCF, PROTEIN_E_FoxA, PROTEIN_E_Alx1)
	GENE_E_Gcm_transcription_0_products_0: 0  -> mRNA_E_Gcm()@Compartment__cell fRate33() #Modifiers(PROTEIN_E_nBTCF, PROTEIN_E_SuHN, PROTEIN_E_Gcm, PROTEIN_E_GroTCF, PROTEIN_E_FoxA, PROTEIN_E_Alx1)
	GENE_E_Gelsolin_transcription_0_reactants_0: 0  -> GENE_E_Gelsolin()@Compartment__cell -1*(fRate34()) #Modifiers(PROTEIN_E_Bra)
	GENE_E_Gelsolin_transcription_0_products_0: 0  -> mRNA_E_Gelsolin()@Compartment__cell fRate34() #Modifiers(PROTEIN_E_Bra)
	GENE_E_HesC_transcription_0_reactants_0: 0  -> GENE_E_HesC()@Compartment__cell -1*(fRate35()) #Modifiers(PROTEIN_E_UbiqHesC, PROTEIN_E_Pmar1)
	GENE_E_HesC_transcription_0_products_0: 0  -> mRNA_E_HesC()@Compartment__cell fRate35() #Modifiers(PROTEIN_E_UbiqHesC, PROTEIN_E_Pmar1)
	GENE_E_Hex_transcription_0_reactants_0: 0  -> GENE_E_Hex()@Compartment__cell -1*(fRate36()) #Modifiers(PROTEIN_E_Tgif, PROTEIN_E_Ets1, PROTEIN_E_Erg)
	GENE_E_Hex_transcription_0_products_0: 0  -> mRNA_E_Hex()@Compartment__cell fRate36() #Modifiers(PROTEIN_E_Tgif, PROTEIN_E_Ets1, PROTEIN_E_Erg)
	GENE_E_Hnf6_transcription_0_reactants_0: 0  -> GENE_E_Hnf6()@Compartment__cell -1*(fRate37()) #Modifiers(PROTEIN_E_UbiqHnf6)
	GENE_E_Hnf6_transcription_0_products_0: 0  -> mRNA_E_Hnf6()@Compartment__cell fRate37() #Modifiers(PROTEIN_E_UbiqHnf6)
	GENE_E_Hox_transcription_0_reactants_0: 0  -> GENE_E_Hox()@Compartment__cell -1*(fRate38()) #Modifiers(PROTEIN_E_Blimp1, PROTEIN_E_nBTCF, PROTEIN_E_Eve, PROTEIN_E_Otx, PROTEIN_E_GroTCF)
	GENE_E_Hox_transcription_0_products_0: 0  -> mRNA_E_Hox()@Compartment__cell fRate38() #Modifiers(PROTEIN_E_Blimp1, PROTEIN_E_nBTCF, PROTEIN_E_Eve, PROTEIN_E_Otx, PROTEIN_E_GroTCF)
	GENE_E_Kakapo_transcription_0_reactants_0: 0  -> GENE_E_Kakapo()@Compartment__cell -1*(fRate39()) #Modifiers(PROTEIN_E_Bra)
	GENE_E_Kakapo_transcription_0_products_0: 0  -> mRNA_E_Kakapo()@Compartment__cell fRate39() #Modifiers(PROTEIN_E_Bra)
	GENE_E_Lim_transcription_0_reactants_0: 0  -> GENE_E_Lim()@Compartment__cell -1*(fRate40()) #Modifiers(PROTEIN_E_GataE, PROTEIN_E_Otx)
	GENE_E_Lim_transcription_0_products_0: 0  -> mRNA_E_Lim()@Compartment__cell fRate40() #Modifiers(PROTEIN_E_GataE, PROTEIN_E_Otx)
	GENE_E_Msp130_transcription_0_reactants_0: 0  -> GENE_E_Msp130()@Compartment__cell -1*(fRate41()) #Modifiers(PROTEIN_E_Hnf6, PROTEIN_E_FoxB, PROTEIN_E_Ets1, PROTEIN_E_Alx1, PROTEIN_E_Hex, PROTEIN_E_TBr, PROTEIN_E_Erg)
	GENE_E_Msp130_transcription_0_products_0: 0  -> mRNA_E_Msp130()@Compartment__cell fRate41() #Modifiers(PROTEIN_E_Hnf6, PROTEIN_E_FoxB, PROTEIN_E_Ets1, PROTEIN_E_Alx1, PROTEIN_E_Hex, PROTEIN_E_TBr, PROTEIN_E_Erg)
	GENE_E_MspL_transcription_0_reactants_0: 0  -> GENE_E_MspL()@Compartment__cell -1*(fRate42()) #Modifiers(PROTEIN_E_Ets1, PROTEIN_E_Alx1, PROTEIN_E_VEGFSignal, PROTEIN_E_Hex, PROTEIN_E_Erg)
	GENE_E_MspL_transcription_0_products_0: 0  -> mRNA_E_MspL()@Compartment__cell fRate42() #Modifiers(PROTEIN_E_Ets1, PROTEIN_E_Alx1, PROTEIN_E_VEGFSignal, PROTEIN_E_Hex, PROTEIN_E_Erg)
	GENE_E_Not_transcription_0_reactants_0: 0  -> GENE_E_Not()@Compartment__cell -1*(fRate43()) #Modifiers(PROTEIN_E_GataE)
	GENE_E_Not_transcription_0_products_0: 0  -> mRNA_E_Not()@Compartment__cell fRate43() #Modifiers(PROTEIN_E_GataE)
	GENE_E_Nrl_transcription_0_reactants_0: 0  -> GENE_E_Nrl()@Compartment__cell -1*(fRate44()) #Modifiers(PROTEIN_E_TBr, PROTEIN_E_UMANrl, PROTEIN_E_FoxN23, PROTEIN_E_GataE, PROTEIN_E_HesC, PROTEIN_E_Tgif)
	GENE_E_Nrl_transcription_0_products_0: 0  -> mRNA_E_Nrl()@Compartment__cell fRate44() #Modifiers(PROTEIN_E_TBr, PROTEIN_E_UMANrl, PROTEIN_E_FoxN23, PROTEIN_E_GataE, PROTEIN_E_HesC, PROTEIN_E_Tgif)
	GENE_E_OrCt_transcription_0_reactants_0: 0  -> GENE_E_OrCt()@Compartment__cell -1*(fRate45()) #Modifiers(PROTEIN_E_Bra, PROTEIN_E_Hox)
	GENE_E_OrCt_transcription_0_products_0: 0  -> mRNA_E_OrCt()@Compartment__cell fRate45() #Modifiers(PROTEIN_E_Bra, PROTEIN_E_Hox)
	GENE_E_Otx_transcription_0_reactants_0: 0  -> GENE_E_Otx()@Compartment__cell -1*(fRate46()) #Modifiers(PROTEIN_E_UVAOtx, PROTEIN_E_Blimp1, PROTEIN_E_GataE, PROTEIN_E_Otx)
	GENE_E_Otx_transcription_0_products_0: 0  -> mRNA_E_Otx()@Compartment__cell fRate46() #Modifiers(PROTEIN_E_UVAOtx, PROTEIN_E_Blimp1, PROTEIN_E_GataE, PROTEIN_E_Otx)
	GENE_E_Pks_transcription_0_reactants_0: 0  -> GENE_E_Pks()@Compartment__cell -1*(fRate47()) #Modifiers(PROTEIN_E_Gcm, PROTEIN_E_GataE)
	GENE_E_Pks_transcription_0_products_0: 0  -> mRNA_E_Pks()@Compartment__cell fRate47() #Modifiers(PROTEIN_E_Gcm, PROTEIN_E_GataE)
	GENE_E_Pmar1_transcription_0_reactants_0: 0  -> GENE_E_Pmar1()@Compartment__cell -1*(fRate48()) #Modifiers(PROTEIN_E_nBTCF, PROTEIN_E_Otx, PROTEIN_E_GroTCF)
	GENE_E_Pmar1_transcription_0_products_0: 0  -> mRNA_E_Pmar1()@Compartment__cell fRate48() #Modifiers(PROTEIN_E_nBTCF, PROTEIN_E_Otx, PROTEIN_E_GroTCF)
	GENE_E_Sm27_transcription_0_reactants_0: 0  -> GENE_E_Sm27()@Compartment__cell -1*(fRate49()) #Modifiers(PROTEIN_E_Dri, PROTEIN_E_Hnf6, PROTEIN_E_Ets1, PROTEIN_E_Alx1, PROTEIN_E_Tel, PROTEIN_E_Hex, PROTEIN_E_Erg)
	GENE_E_Sm27_transcription_0_products_0: 0  -> mRNA_E_Sm27()@Compartment__cell fRate49() #Modifiers(PROTEIN_E_Dri, PROTEIN_E_Hnf6, PROTEIN_E_Ets1, PROTEIN_E_Alx1, PROTEIN_E_Tel, PROTEIN_E_Hex, PROTEIN_E_Erg)
	GENE_E_Sm30_transcription_0_reactants_0: 0  -> GENE_E_Sm30()@Compartment__cell -1*(fRate50()) #Modifiers(PROTEIN_E_VEGFSignal)
	GENE_E_Sm30_transcription_0_products_0: 0  -> mRNA_E_Sm30()@Compartment__cell fRate50() #Modifiers(PROTEIN_E_VEGFSignal)
	GENE_E_Sm50_transcription_0_reactants_0: 0  -> GENE_E_Sm50()@Compartment__cell -1*(fRate51()) #Modifiers(PROTEIN_E_Dri, PROTEIN_E_Hnf6, PROTEIN_E_Ets1, PROTEIN_E_Alx1, PROTEIN_E_Tel, PROTEIN_E_Hex, PROTEIN_E_Erg, PROTEIN_E_VEGFSignal)
	GENE_E_Sm50_transcription_0_products_0: 0  -> mRNA_E_Sm50()@Compartment__cell fRate51() #Modifiers(PROTEIN_E_Dri, PROTEIN_E_Hnf6, PROTEIN_E_Ets1, PROTEIN_E_Alx1, PROTEIN_E_Tel, PROTEIN_E_Hex, PROTEIN_E_Erg, PROTEIN_E_VEGFSignal)
	GENE_E_Snail_transcription_0_reactants_0: 0  -> GENE_E_Snail()@Compartment__cell -1*(fRate52()) #Modifiers(PROTEIN_E_Hex)
	GENE_E_Snail_transcription_0_products_0: 0  -> mRNA_E_Snail()@Compartment__cell fRate52() #Modifiers(PROTEIN_E_Hex)
	GENE_E_SoxB1_transcription_0_reactants_0: 0  -> GENE_E_SoxB1()@Compartment__cell -1*(fRate53()) #Modifiers(PROTEIN_E_UbiqSoxB1, PROTEIN_E_SoxB1)
	GENE_E_SoxB1_transcription_0_products_0: 0  -> mRNA_E_SoxB1()@Compartment__cell fRate53() #Modifiers(PROTEIN_E_UbiqSoxB1, PROTEIN_E_SoxB1)
	GENE_E_SoxC_transcription_0_reactants_0: 0  -> GENE_E_SoxC()@Compartment__cell -1*(fRate54()) #Modifiers(PROTEIN_E_UbiqSoxC, PROTEIN_E_HesC, PROTEIN_E_SoxC)
	GENE_E_SoxC_transcription_0_products_0: 0  -> mRNA_E_SoxC()@Compartment__cell fRate54() #Modifiers(PROTEIN_E_UbiqSoxC, PROTEIN_E_HesC, PROTEIN_E_SoxC)
	GENE_E_SuTx_transcription_0_reactants_0: 0  -> GENE_E_SuTx()@Compartment__cell -1*(fRate55()) #Modifiers(PROTEIN_E_Gcm, PROTEIN_E_GataE)
	GENE_E_SuTx_transcription_0_products_0: 0  -> mRNA_E_SuTx()@Compartment__cell fRate55() #Modifiers(PROTEIN_E_Gcm, PROTEIN_E_GataE)
	GENE_E_TBr_transcription_0_reactants_0: 0  -> GENE_E_TBr()@Compartment__cell -1*(fRate56()) #Modifiers(PROTEIN_E_Ets1, PROTEIN_E_HesC, PROTEIN_E_TBr)
	GENE_E_TBr_transcription_0_products_0: 0  -> mRNA_E_TBr()@Compartment__cell fRate56() #Modifiers(PROTEIN_E_Ets1, PROTEIN_E_HesC, PROTEIN_E_TBr)
	GENE_E_Tel_transcription_0_reactants_0: 0  -> GENE_E_Tel()@Compartment__cell -1*(fRate57()) #Modifiers(PROTEIN_E_UbiqTel, PROTEIN_E_Tel, PROTEIN_E_HesC)
	GENE_E_Tel_transcription_0_products_0: 0  -> mRNA_E_Tel()@Compartment__cell fRate57() #Modifiers(PROTEIN_E_UbiqTel, PROTEIN_E_Tel, PROTEIN_E_HesC)
	GENE_E_Tgif_transcription_0_reactants_0: 0  -> GENE_E_Tgif()@Compartment__cell -1*(fRate58()) #Modifiers(PROTEIN_E_Tgif, PROTEIN_E_Ets1, PROTEIN_E_Erg, PROTEIN_E_Hex)
	GENE_E_Tgif_transcription_0_products_0: 0  -> mRNA_E_Tgif()@Compartment__cell fRate58() #Modifiers(PROTEIN_E_Tgif, PROTEIN_E_Ets1, PROTEIN_E_Erg, PROTEIN_E_Hex)
	GENE_E_VEGFR_transcription_0_reactants_0: 0  -> GENE_E_VEGFR()@Compartment__cell -1*(fRate59()) #Modifiers(PROTEIN_E_Alx1, PROTEIN_E_Dri, PROTEIN_E_Ets1, PROTEIN_E_Hex)
	GENE_E_VEGFR_transcription_0_products_0: 0  -> mRNA_E_VEGFR()@Compartment__cell fRate59() #Modifiers(PROTEIN_E_Alx1, PROTEIN_E_Dri, PROTEIN_E_Ets1, PROTEIN_E_Hex)
	GENE_E_Wnt8_transcription_0_reactants_0: 0  -> GENE_E_Wnt8()@Compartment__cell -1*(fRate60()) #Modifiers(PROTEIN_E_nBTCF, PROTEIN_E_Blimp1, PROTEIN_E_GroTCF)
	GENE_E_Wnt8_transcription_0_products_0: 0  -> mRNA_E_Wnt8()@Compartment__cell fRate60() #Modifiers(PROTEIN_E_nBTCF, PROTEIN_E_Blimp1, PROTEIN_E_GroTCF)
	GENE_E_z13_transcription_0_reactants_0: 0  -> GENE_E_z13()@Compartment__cell -1*(fRate61()) #Modifiers(PROTEIN_E_nBTCF, PROTEIN_E_GroTCF, PROTEIN_E_Hnf6)
	GENE_E_z13_transcription_0_products_0: 0  -> mRNA_E_z13()@Compartment__cell fRate61() #Modifiers(PROTEIN_E_nBTCF, PROTEIN_E_GroTCF, PROTEIN_E_Hnf6)
	GENE_M_Alx1_transcription_0_reactants_0: 0  -> GENE_M_Alx1()@Compartment__cell -1*(fRate62()) #Modifiers(PROTEIN_M_Ets1, PROTEIN_M_UbiqAlx1, PROTEIN_M_Tgif, PROTEIN_M_Gcm, PROTEIN_M_HesC)
	GENE_M_Alx1_transcription_0_products_0: 0  -> mRNA_M_Alx1()@Compartment__cell fRate62() #Modifiers(PROTEIN_M_Ets1, PROTEIN_M_UbiqAlx1, PROTEIN_M_Tgif, PROTEIN_M_Gcm, PROTEIN_M_HesC)
	GENE_M_Apobec_transcription_0_reactants_0: 0  -> GENE_M_Apobec()@Compartment__cell -1*(fRate63()) #Modifiers(PROTEIN_M_Bra, PROTEIN_E_Bra, PROTEIN_M_Hox)
	GENE_M_Apobec_transcription_0_products_0: 0  -> mRNA_M_Apobec()@Compartment__cell fRate63() #Modifiers(PROTEIN_M_Bra, PROTEIN_E_Bra, PROTEIN_M_Hox)
	GENE_M_Blimp1_transcription_0_reactants_0: 0  -> GENE_M_Blimp1()@Compartment__cell -1*(fRate64()) #Modifiers(PROTEIN_M_Otx, PROTEIN_M_Brn, PROTEIN_M_GataE, PROTEIN_M_nBTCF, PROTEIN_M_Eve, PROTEIN_M_Blimp1, PROTEIN_M_GroTCF)
	GENE_M_Blimp1_transcription_0_products_0: 0  -> mRNA_M_Blimp1()@Compartment__cell fRate64() #Modifiers(PROTEIN_M_Otx, PROTEIN_M_Brn, PROTEIN_M_GataE, PROTEIN_M_nBTCF, PROTEIN_M_Eve, PROTEIN_M_Blimp1, PROTEIN_M_GroTCF)
	GENE_M_Bra_transcription_0_reactants_0: 0  -> GENE_M_Bra()@Compartment__cell -1*(fRate65()) #Modifiers(PROTEIN_M_GataE, PROTEIN_M_nBTCF, PROTEIN_M_Otx, PROTEIN_M_GroTCF)
	GENE_M_Bra_transcription_0_products_0: 0  -> mRNA_M_Bra()@Compartment__cell fRate65() #Modifiers(PROTEIN_M_GataE, PROTEIN_M_nBTCF, PROTEIN_M_Otx, PROTEIN_M_GroTCF)
	GENE_M_Brn_transcription_0_reactants_0: 0  -> GENE_M_Brn()@Compartment__cell -1*(fRate66()) #Modifiers(PROTEIN_M_GataE)
	GENE_M_Brn_transcription_0_products_0: 0  -> mRNA_M_Brn()@Compartment__cell fRate66() #Modifiers(PROTEIN_M_GataE)
	GENE_M_CAPK_transcription_0_reactants_0: 0  -> GENE_M_CAPK()@Compartment__cell -1*(fRate67()) #Modifiers(PROTEIN_E_Bra)
	GENE_M_CAPK_transcription_0_products_0: 0  -> mRNA_M_CAPK()@Compartment__cell fRate67() #Modifiers(PROTEIN_E_Bra)
	GENE_M_CyP_transcription_0_reactants_0: 0  -> GENE_M_CyP()@Compartment__cell -1*(fRate68()) #Modifiers(PROTEIN_M_Dri, PROTEIN_M_Ets1, PROTEIN_M_SoxB1)
	GENE_M_CyP_transcription_0_products_0: 0  -> mRNA_M_CyP()@Compartment__cell fRate68() #Modifiers(PROTEIN_M_Dri, PROTEIN_M_Ets1, PROTEIN_M_SoxB1)
	GENE_M_Delta_transcription_0_reactants_0: 0  -> GENE_M_Delta()@Compartment__cell -1*(fRate69()) #Modifiers(PROTEIN_M_UbiqDelta, PROTEIN_M_UMADelta, PROTEIN_M_Ets1, PROTEIN_M_HesC)
	GENE_M_Delta_transcription_0_products_0: 0  -> mRNA_M_Delta()@Compartment__cell fRate69() #Modifiers(PROTEIN_M_UbiqDelta, PROTEIN_M_UMADelta, PROTEIN_M_Ets1, PROTEIN_M_HesC)
	GENE_M_Dpt_transcription_0_reactants_0: 0  -> GENE_M_Dpt()@Compartment__cell -1*(fRate70()) #Modifiers(PROTEIN_E_Bra, PROTEIN_M_Gcm)
	GENE_M_Dpt_transcription_0_products_0: 0  -> mRNA_M_Dpt()@Compartment__cell fRate70() #Modifiers(PROTEIN_E_Bra, PROTEIN_M_Gcm)
	GENE_M_Dri_transcription_0_reactants_0: 0  -> GENE_M_Dri()@Compartment__cell -1*(fRate71()) #Modifiers(PROTEIN_M_Alx1, PROTEIN_M_Ets1)
	GENE_M_Dri_transcription_0_products_0: 0  -> mRNA_M_Dri()@Compartment__cell fRate71() #Modifiers(PROTEIN_M_Alx1, PROTEIN_M_Ets1)
	GENE_M_Endo16_transcription_0_reactants_0: 0  -> GENE_M_Endo16()@Compartment__cell -1*(fRate72()) #Modifiers(PROTEIN_M_Otx, PROTEIN_M_Brn)
	GENE_M_Endo16_transcription_0_products_0: 0  -> mRNA_M_Endo16()@Compartment__cell fRate72() #Modifiers(PROTEIN_M_Otx, PROTEIN_M_Brn)
	GENE_M_Erg_transcription_0_reactants_0: 0  -> GENE_M_Erg()@Compartment__cell -1*(fRate73()) #Modifiers(PROTEIN_M_TBr, PROTEIN_M_Ets1, PROTEIN_M_Hex)
	GENE_M_Erg_transcription_0_products_0: 0  -> mRNA_M_Erg()@Compartment__cell fRate73() #Modifiers(PROTEIN_M_TBr, PROTEIN_M_Ets1, PROTEIN_M_Hex)
	GENE_M_Ets1_transcription_0_reactants_0: 0  -> GENE_M_Ets1()@Compartment__cell -1*(fRate74()) #Modifiers(PROTEIN_M_UbiqEts1, PROTEIN_M_HesC)
	GENE_M_Ets1_transcription_0_products_0: 0  -> mRNA_M_Ets1()@Compartment__cell fRate74() #Modifiers(PROTEIN_M_UbiqEts1, PROTEIN_M_HesC)
	GENE_M_Eve_transcription_0_reactants_0: 0  -> GENE_M_Eve()@Compartment__cell -1*(fRate75()) #Modifiers(PROTEIN_M_Blimp1, PROTEIN_M_nBTCF, PROTEIN_M_GroTCF, PROTEIN_M_Hox)
	GENE_M_Eve_transcription_0_products_0: 0  -> mRNA_M_Eve()@Compartment__cell fRate75() #Modifiers(PROTEIN_M_Blimp1, PROTEIN_M_nBTCF, PROTEIN_M_GroTCF, PROTEIN_M_Hox)
	GENE_M_Ficolin_transcription_0_reactants_0: 0  -> GENE_M_Ficolin()@Compartment__cell -1*(fRate76()) #Modifiers(PROTEIN_M_Ets1, PROTEIN_M_Hnf6, PROTEIN_M_Hex, PROTEIN_M_Erg)
	GENE_M_Ficolin_transcription_0_products_0: 0  -> mRNA_M_Ficolin()@Compartment__cell fRate76() #Modifiers(PROTEIN_M_Ets1, PROTEIN_M_Hnf6, PROTEIN_M_Hex, PROTEIN_M_Erg)
	GENE_M_FoxA_transcription_0_reactants_0: 0  -> GENE_M_FoxA()@Compartment__cell -1*(fRate77()) #Modifiers(PROTEIN_M_GataE, PROTEIN_M_nBTCF, PROTEIN_M_Otx, PROTEIN_M_Bra, PROTEIN_M_Tgif, PROTEIN_M_GroTFC, PROTEIN_M_FoxA)
	GENE_M_FoxA_transcription_0_products_0: 0  -> mRNA_M_FoxA()@Compartment__cell fRate77() #Modifiers(PROTEIN_M_GataE, PROTEIN_M_nBTCF, PROTEIN_M_Otx, PROTEIN_M_Bra, PROTEIN_M_Tgif, PROTEIN_M_GroTFC, PROTEIN_M_FoxA)
	GENE_M_FoxB_transcription_0_reactants_0: 0  -> GENE_M_FoxB()@Compartment__cell -1*(fRate78()) #Modifiers(PROTEIN_M_Alx1, PROTEIN_M_Ets1, PROTEIN_M_TBr, PROTEIN_M_Dri, PROTEIN_M_FoxB)
	GENE_M_FoxB_transcription_0_products_0: 0  -> mRNA_M_FoxB()@Compartment__cell fRate78() #Modifiers(PROTEIN_M_Alx1, PROTEIN_M_Ets1, PROTEIN_M_TBr, PROTEIN_M_Dri, PROTEIN_M_FoxB)
	GENE_M_FoxN23_transcription_0_reactants_0: 0  -> GENE_M_FoxN23()@Compartment__cell -1*(fRate79()) #Modifiers(PROTEIN_M_nBTCF)
	GENE_M_FoxN23_transcription_0_products_0: 0  -> mRNA_M_FoxN23()@Compartment__cell fRate79() #Modifiers(PROTEIN_M_nBTCF)
	GENE_M_FoxO_transcription_0_reactants_0: 0  -> GENE_M_FoxO()@Compartment__cell -1*(fRate80()) #Modifiers(PROTEIN_M_Ets1, PROTEIN_M_Hex, PROTEIN_M_Tgif, PROTEIN_M_Erg)
	GENE_M_FoxO_transcription_0_products_0: 0  -> mRNA_M_FoxO()@Compartment__cell fRate80() #Modifiers(PROTEIN_M_Ets1, PROTEIN_M_Hex, PROTEIN_M_Tgif, PROTEIN_M_Erg)
	GENE_M_FvMo_transcription_0_reactants_0: 0  -> GENE_M_FvMo()@Compartment__cell -1*(fRate81()) #Modifiers(PROTEIN_M_Gcm, PROTEIN_M_GataE)
	GENE_M_FvMo_transcription_0_products_0: 0  -> mRNA_M_FvMo()@Compartment__cell fRate81() #Modifiers(PROTEIN_M_Gcm, PROTEIN_M_GataE)
	GENE_M_GataC_transcription_0_reactants_0: 0  -> GENE_M_GataC()@Compartment__cell -1*(fRate82()) #Modifiers(PROTEIN_M_GataE, PROTEIN_M_Hnf6, PROTEIN_GCM, PROTEIN_M_GataC)
	GENE_M_GataC_transcription_0_products_0: 0  -> mRNA_M_GataC()@Compartment__cell fRate82() #Modifiers(PROTEIN_M_GataE, PROTEIN_M_Hnf6, PROTEIN_GCM, PROTEIN_M_GataC)
	GENE_M_GataE_transcription_0_reactants_0: 0  -> GENE_M_GataE()@Compartment__cell -1*(fRate83()) #Modifiers(PROTEIN_M_Otx, PROTEIN_M_SuHN, PROTEIN_M_Hox)
	GENE_M_GataE_transcription_0_products_0: 0  -> mRNA_M_GataE()@Compartment__cell fRate83() #Modifiers(PROTEIN_M_Otx, PROTEIN_M_SuHN, PROTEIN_M_Hox)
	GENE_M_Gcad_transcription_0_reactants_0: 0  -> GENE_M_Gcad()@Compartment__cell -1*(fRate84()) #Modifiers(PROTEIN_M_UbiqGcad, PROTEIN_M_Snail)
	GENE_M_Gcad_transcription_0_products_0: 0  -> mRNA_M_Gcad()@Compartment__cell fRate84() #Modifiers(PROTEIN_M_UbiqGcad, PROTEIN_M_Snail)
	GENE_M_Gcm_transcription_0_reactants_0: 0  -> GENE_M_Gcm()@Compartment__cell -1*(fRate85()) #Modifiers(PROTEIN_M_nBTCF, PROTEIN_M_SuHN, PROTEIN_M_Gcm, PROTEIN_M_GroTCF, PROTEIN_M_FoxA, PROTEIN_M_Alx1)
	GENE_M_Gcm_transcription_0_products_0: 0  -> mRNA_M_Gcm()@Compartment__cell fRate85() #Modifiers(PROTEIN_M_nBTCF, PROTEIN_M_SuHN, PROTEIN_M_Gcm, PROTEIN_M_GroTCF, PROTEIN_M_FoxA, PROTEIN_M_Alx1)
	GENE_M_Gelsolin_transcription_0_reactants_0: 0  -> GENE_M_Gelsolin()@Compartment__cell -1*(fRate86()) #Modifiers(PROTEIN_M_Bra, PROTEIN_E_Bra)
	GENE_M_Gelsolin_transcription_0_products_0: 0  -> mRNA_M_Gelsolin()@Compartment__cell fRate86() #Modifiers(PROTEIN_M_Bra, PROTEIN_E_Bra)
	GENE_M_HesC_transcription_0_reactants_0: 0  -> GENE_M_HesC()@Compartment__cell -1*(fRate87()) #Modifiers(PROTEIN_M_UbiqHesC, PROTEIN_M_Pmar1)
	GENE_M_HesC_transcription_0_products_0: 0  -> mRNA_M_HesC()@Compartment__cell fRate87() #Modifiers(PROTEIN_M_UbiqHesC, PROTEIN_M_Pmar1)
	GENE_M_Hex_transcription_0_reactants_0: 0  -> GENE_M_Hex()@Compartment__cell -1*(fRate88()) #Modifiers(PROTEIN_M_Tgif, PROTEIN_M_Ets1, PROTEIN_M_Erg)
	GENE_M_Hex_transcription_0_products_0: 0  -> mRNA_M_Hex()@Compartment__cell fRate88() #Modifiers(PROTEIN_M_Tgif, PROTEIN_M_Ets1, PROTEIN_M_Erg)
	GENE_M_Hnf6_transcription_0_reactants_0: 0  -> GENE_M_Hnf6()@Compartment__cell -1*(fRate89()) #Modifiers(PROTEIN_M_UbiqHnf6)
	GENE_M_Hnf6_transcription_0_products_0: 0  -> mRNA_M_Hnf6()@Compartment__cell fRate89() #Modifiers(PROTEIN_M_UbiqHnf6)
	GENE_M_Hox_transcription_0_reactants_0: 0  -> GENE_M_Hox()@Compartment__cell -1*(fRate90()) #Modifiers(PROTEIN_M_Blimp1, PROTEIN_M_nBTCF, PROTEIN_M_Eve, PROTEIN_M_Otx, PROTEIN_M_GroTCF)
	GENE_M_Hox_transcription_0_products_0: 0  -> mRNA_M_Hox()@Compartment__cell fRate90() #Modifiers(PROTEIN_M_Blimp1, PROTEIN_M_nBTCF, PROTEIN_M_Eve, PROTEIN_M_Otx, PROTEIN_M_GroTCF)
	GENE_M_Kakapo_transcription_0_reactants_0: 0  -> GENE_M_Kakapo()@Compartment__cell -1*(fRate91()) #Modifiers(PROTEIN_M_Bra, PROTEIN_E_Bra)
	GENE_M_Kakapo_transcription_0_products_0: 0  -> mRNA_M_Kakapo()@Compartment__cell fRate91() #Modifiers(PROTEIN_M_Bra, PROTEIN_E_Bra)
	GENE_M_Lim_transcription_0_reactants_0: 0  -> GENE_M_Lim()@Compartment__cell -1*(fRate92()) #Modifiers(PROTEIN_M_GataE, PROTEIN_M_Otx)
	GENE_M_Lim_transcription_0_products_0: 0  -> mRNA_M_Lim()@Compartment__cell fRate92() #Modifiers(PROTEIN_M_GataE, PROTEIN_M_Otx)
	GENE_M_Msp130_transcription_0_reactants_0: 0  -> GENE_M_Msp130()@Compartment__cell -1*(fRate93()) #Modifiers(PROTEIN_M_Hnf6, PROTEIN_M_FoxB, PROTEIN_M_Ets1, PROTEIN_M_Alx1, PROTEIN_M_Hex, PROTEIN_M_TBr, PROTEIN_M_Erg)
	GENE_M_Msp130_transcription_0_products_0: 0  -> mRNA_M_Msp130()@Compartment__cell fRate93() #Modifiers(PROTEIN_M_Hnf6, PROTEIN_M_FoxB, PROTEIN_M_Ets1, PROTEIN_M_Alx1, PROTEIN_M_Hex, PROTEIN_M_TBr, PROTEIN_M_Erg)
	GENE_M_MspL_transcription_0_reactants_0: 0  -> GENE_M_MspL()@Compartment__cell -1*(fRate94()) #Modifiers(PROTEIN_M_Ets1, PROTEIN_M_Alx1, PROTEIN_M_VEGFSignal, PROTEIN_M_Hex, PROTEIN_M_Erg)
	GENE_M_MspL_transcription_0_products_0: 0  -> mRNA_M_MspL()@Compartment__cell fRate94() #Modifiers(PROTEIN_M_Ets1, PROTEIN_M_Alx1, PROTEIN_M_VEGFSignal, PROTEIN_M_Hex, PROTEIN_M_Erg)
	GENE_M_Not_transcription_0_reactants_0: 0  -> GENE_M_Not()@Compartment__cell -1*(fRate95()) #Modifiers(PROTEIN_M_GataE)
	GENE_M_Not_transcription_0_products_0: 0  -> mRNA_M_Not()@Compartment__cell fRate95() #Modifiers(PROTEIN_M_GataE)
	GENE_M_Nrl_transcription_0_reactants_0: 0  -> GENE_M_Nrl()@Compartment__cell -1*(fRate96()) #Modifiers(PROTEIN_M_TBr, PROTEIN_M_UMANrl, PROTEIN_M_FoxN23, PROTEIN_M_GataE, PROTEIN_M_HesC, PROTEIN_E_Bra, PROTEIN_M_Tgif)
	GENE_M_Nrl_transcription_0_products_0: 0  -> mRNA_M_Nrl()@Compartment__cell fRate96() #Modifiers(PROTEIN_M_TBr, PROTEIN_M_UMANrl, PROTEIN_M_FoxN23, PROTEIN_M_GataE, PROTEIN_M_HesC, PROTEIN_E_Bra, PROTEIN_M_Tgif)
	GENE_M_OrCt_transcription_0_reactants_0: 0  -> GENE_M_OrCt()@Compartment__cell -1*(fRate97()) #Modifiers(PROTEIN_M_Bra, PROTEIN_E_Bra, PROTEIN_M_Hox)
	GENE_M_OrCt_transcription_0_products_0: 0  -> mRNA_M_OrCt()@Compartment__cell fRate97() #Modifiers(PROTEIN_M_Bra, PROTEIN_E_Bra, PROTEIN_M_Hox)
	GENE_M_Otx_transcription_0_reactants_0: 0  -> GENE_M_Otx()@Compartment__cell -1*(fRate98()) #Modifiers(PROTEIN_M_UVAOtx, PROTEIN_M_Blimp1, PROTEIN_M_GataE, PROTEIN_M_Otx)
	GENE_M_Otx_transcription_0_products_0: 0  -> mRNA_M_Otx()@Compartment__cell fRate98() #Modifiers(PROTEIN_M_UVAOtx, PROTEIN_M_Blimp1, PROTEIN_M_GataE, PROTEIN_M_Otx)
	GENE_M_Pks_transcription_0_reactants_0: 0  -> GENE_M_Pks()@Compartment__cell -1*(fRate99()) #Modifiers(PROTEIN_E_Bra, PROTEIN_M_Gcm, PROTEIN_M_GataE)
	GENE_M_Pks_transcription_0_products_0: 0  -> mRNA_M_Pks()@Compartment__cell fRate99() #Modifiers(PROTEIN_E_Bra, PROTEIN_M_Gcm, PROTEIN_M_GataE)
	GENE_M_Pmar1_transcription_0_reactants_0: 0  -> GENE_M_Pmar1()@Compartment__cell -1*(fRate100()) #Modifiers(PROTEIN_M_nBTCF, PROTEIN_M_Otx, PROTEIN_M_GroTCF)
	GENE_M_Pmar1_transcription_0_products_0: 0  -> mRNA_M_Pmar1()@Compartment__cell fRate100() #Modifiers(PROTEIN_M_nBTCF, PROTEIN_M_Otx, PROTEIN_M_GroTCF)
	GENE_M_Sm27_transcription_0_reactants_0: 0  -> GENE_M_Sm27()@Compartment__cell -1*(fRate101()) #Modifiers(PROTEIN_M_Dri, PROTEIN_M_Hnf6, PROTEIN_M_Ets1, PROTEIN_M_Alx1, PROTEIN_M_Tel, PROTEIN_M_Hex, PROTEIN_M_Erg)
	GENE_M_Sm27_transcription_0_products_0: 0  -> mRNA_M_Sm27()@Compartment__cell fRate101() #Modifiers(PROTEIN_M_Dri, PROTEIN_M_Hnf6, PROTEIN_M_Ets1, PROTEIN_M_Alx1, PROTEIN_M_Tel, PROTEIN_M_Hex, PROTEIN_M_Erg)
	GENE_M_Sm30_transcription_0_reactants_0: 0  -> GENE_M_Sm30()@Compartment__cell -1*(fRate102()) #Modifiers(PROTEIN_M_VEGFSignal)
	GENE_M_Sm30_transcription_0_products_0: 0  -> mRNA_M_Sm30()@Compartment__cell fRate102() #Modifiers(PROTEIN_M_VEGFSignal)
	GENE_M_Sm50_transcription_0_reactants_0: 0  -> GENE_M_Sm50()@Compartment__cell -1*(fRate103()) #Modifiers(PROTEIN_M_Dri, PROTEIN_M_Hnf6, PROTEIN_M_Ets1, PROTEIN_M_Alx1, PROTEIN_M_Tel, PROTEIN_M_Hex, PROTEIN_M_Erg, PROTEIN_M_VEGFSignal)
	GENE_M_Sm50_transcription_0_products_0: 0  -> mRNA_M_Sm50()@Compartment__cell fRate103() #Modifiers(PROTEIN_M_Dri, PROTEIN_M_Hnf6, PROTEIN_M_Ets1, PROTEIN_M_Alx1, PROTEIN_M_Tel, PROTEIN_M_Hex, PROTEIN_M_Erg, PROTEIN_M_VEGFSignal)
	GENE_M_Snail_transcription_0_reactants_0: 0  -> GENE_M_Snail()@Compartment__cell -1*(fRate104()) #Modifiers(PROTEIN_M_Hex)
	GENE_M_Snail_transcription_0_products_0: 0  -> mRNA_M_Snail()@Compartment__cell fRate104() #Modifiers(PROTEIN_M_Hex)
	GENE_M_SoxB1_transcription_0_reactants_0: 0  -> GENE_M_SoxB1()@Compartment__cell -1*(fRate105()) #Modifiers(PROTEIN_M_UbiqSoxB1, PROTEIN_M_SoxB1)
	GENE_M_SoxB1_transcription_0_products_0: 0  -> mRNA_M_SoxB1()@Compartment__cell fRate105() #Modifiers(PROTEIN_M_UbiqSoxB1, PROTEIN_M_SoxB1)
	GENE_M_SoxC_transcription_0_reactants_0: 0  -> GENE_M_SoxC()@Compartment__cell -1*(fRate106()) #Modifiers(PROTEIN_M_UbiqSoxC, PROTEIN_M_HesC, PROTEIN_M_SoxC)
	GENE_M_SoxC_transcription_0_products_0: 0  -> mRNA_M_SoxC()@Compartment__cell fRate106() #Modifiers(PROTEIN_M_UbiqSoxC, PROTEIN_M_HesC, PROTEIN_M_SoxC)
	GENE_M_SuTx_transcription_0_reactants_0: 0  -> GENE_M_SuTx()@Compartment__cell -1*(fRate107()) #Modifiers(PROTEIN_M_Gcm, PROTEIN_M_GataE)
	GENE_M_SuTx_transcription_0_products_0: 0  -> mRNA_M_SuTx()@Compartment__cell fRate107() #Modifiers(PROTEIN_M_Gcm, PROTEIN_M_GataE)
	GENE_M_TBr_transcription_0_reactants_0: 0  -> GENE_M_TBr()@Compartment__cell -1*(fRate108()) #Modifiers(PROTEIN_M_Ets1, PROTEIN_M_HesC, PROTEIN_M_TBr)
	GENE_M_TBr_transcription_0_products_0: 0  -> mRNA_M_TBr()@Compartment__cell fRate108() #Modifiers(PROTEIN_M_Ets1, PROTEIN_M_HesC, PROTEIN_M_TBr)
	GENE_M_Tel_transcription_0_reactants_0: 0  -> GENE_M_Tel()@Compartment__cell -1*(fRate109()) #Modifiers(PROTEIN_M_UbiqTel, PROTEIN_M_Tel, PROTEIN_M_HesC)
	GENE_M_Tel_transcription_0_products_0: 0  -> mRNA_M_Tel()@Compartment__cell fRate109() #Modifiers(PROTEIN_M_UbiqTel, PROTEIN_M_Tel, PROTEIN_M_HesC)
	GENE_M_Tgif_transcription_0_reactants_0: 0  -> GENE_M_Tgif()@Compartment__cell -1*(fRate110()) #Modifiers(PROTEIN_M_Tgif, PROTEIN_M_Ets1, PROTEIN_M_Erg, PROTEIN_M_Hex)
	GENE_M_Tgif_transcription_0_products_0: 0  -> mRNA_M_Tgif()@Compartment__cell fRate110() #Modifiers(PROTEIN_M_Tgif, PROTEIN_M_Ets1, PROTEIN_M_Erg, PROTEIN_M_Hex)
	GENE_M_VEGFR_transcription_0_reactants_0: 0  -> GENE_M_VEGFR()@Compartment__cell -1*(fRate111()) #Modifiers(PROTEIN_M_Alx1, PROTEIN_M_Dri, PROTEIN_M_Ets1, PROTEIN_M_Hex)
	GENE_M_VEGFR_transcription_0_products_0: 0  -> mRNA_M_VEGFR()@Compartment__cell fRate111() #Modifiers(PROTEIN_M_Alx1, PROTEIN_M_Dri, PROTEIN_M_Ets1, PROTEIN_M_Hex)
	GENE_M_Wnt8_transcription_0_reactants_0: 0  -> GENE_M_Wnt8()@Compartment__cell -1*(fRate112()) #Modifiers(PROTEIN_M_nBTCF, PROTEIN_M_Blimp1, PROTEIN_M_GroTCF)
	GENE_M_Wnt8_transcription_0_products_0: 0  -> mRNA_M_Wnt8()@Compartment__cell fRate112() #Modifiers(PROTEIN_M_nBTCF, PROTEIN_M_Blimp1, PROTEIN_M_GroTCF)
	GENE_M_z13_transcription_0_reactants_0: 0  -> GENE_M_z13()@Compartment__cell -1*(fRate113()) #Modifiers(PROTEIN_M_nBTCF, PROTEIN_M_GroTCF, PROTEIN_M_Hnf6)
	GENE_M_z13_transcription_0_products_0: 0  -> mRNA_M_z13()@Compartment__cell fRate113() #Modifiers(PROTEIN_M_nBTCF, PROTEIN_M_GroTCF, PROTEIN_M_Hnf6)
	GENE_P_Alx1_transcription_0_reactants_0: 0  -> GENE_P_Alx1()@Compartment__cell -1*(fRate114()) #Modifiers(PROTEIN_P_Ets1, PROTEIN_P_UbiqAlx1, PROTEIN_P_Tgif, PROTEIN_P_Gcm, PROTEIN_P_HesC)
	GENE_P_Alx1_transcription_0_products_0: 0  -> mRNA_P_Alx1()@Compartment__cell fRate114() #Modifiers(PROTEIN_P_Ets1, PROTEIN_P_UbiqAlx1, PROTEIN_P_Tgif, PROTEIN_P_Gcm, PROTEIN_P_HesC)
	GENE_P_Apobec_transcription_0_reactants_0: 0  -> GENE_P_Apobec()@Compartment__cell -1*(fRate115()) #Modifiers(PROTEIN_P_Bra, PROTEIN_P_Hox)
	GENE_P_Apobec_transcription_0_products_0: 0  -> mRNA_P_Apobec()@Compartment__cell fRate115() #Modifiers(PROTEIN_P_Bra, PROTEIN_P_Hox)
	GENE_P_Blimp1_transcription_0_reactants_0: 0  -> GENE_P_Blimp1()@Compartment__cell -1*(fRate116()) #Modifiers(PROTEIN_P_Otx, PROTEIN_P_Brn, PROTEIN_P_GataE, PROTEIN_P_nBTCF, PROTEIN_P_Eve, PROTEIN_P_Blimp1, PROTEIN_P_GroTCF)
	GENE_P_Blimp1_transcription_0_products_0: 0  -> mRNA_P_Blimp1()@Compartment__cell fRate116() #Modifiers(PROTEIN_P_Otx, PROTEIN_P_Brn, PROTEIN_P_GataE, PROTEIN_P_nBTCF, PROTEIN_P_Eve, PROTEIN_P_Blimp1, PROTEIN_P_GroTCF)
	GENE_P_Bra_transcription_0_reactants_0: 0  -> GENE_P_Bra()@Compartment__cell -1*(fRate117()) #Modifiers(PROTEIN_P_GataE, PROTEIN_P_nBTCF, PROTEIN_P_Otx, PROTEIN_P_GroTCF)
	GENE_P_Bra_transcription_0_products_0: 0  -> mRNA_P_Bra()@Compartment__cell fRate117() #Modifiers(PROTEIN_P_GataE, PROTEIN_P_nBTCF, PROTEIN_P_Otx, PROTEIN_P_GroTCF)
	GENE_P_Brn_transcription_0_reactants_0: 0  -> GENE_P_Brn()@Compartment__cell -1*(fRate118()) #Modifiers(PROTEIN_P_GataE)
	GENE_P_Brn_transcription_0_products_0: 0  -> mRNA_P_Brn()@Compartment__cell fRate118() #Modifiers(PROTEIN_P_GataE)
	GENE_P_CyP_transcription_0_reactants_0: 0  -> GENE_P_CyP()@Compartment__cell -1*(fRate119()) #Modifiers(PROTEIN_P_Dri, PROTEIN_P_Ets1, PROTEIN_P_SoxB1)
	GENE_P_CyP_transcription_0_products_0: 0  -> mRNA_P_CyP()@Compartment__cell fRate119() #Modifiers(PROTEIN_P_Dri, PROTEIN_P_Ets1, PROTEIN_P_SoxB1)
	GENE_P_Delta_transcription_0_reactants_0: 0  -> GENE_P_Delta()@Compartment__cell -1*(fRate120()) #Modifiers(PROTEIN_P_UbiqDelta, PROTEIN_P_UMADelta, PROTEIN_P_Ets1, PROTEIN_P_HesC)
	GENE_P_Delta_transcription_0_products_0: 0  -> mRNA_P_Delta()@Compartment__cell fRate120() #Modifiers(PROTEIN_P_UbiqDelta, PROTEIN_P_UMADelta, PROTEIN_P_Ets1, PROTEIN_P_HesC)
	GENE_P_Dpt_transcription_0_reactants_0: 0  -> GENE_P_Dpt()@Compartment__cell -1*(fRate121()) #Modifiers(PROTEIN_P_Gcm)
	GENE_P_Dpt_transcription_0_products_0: 0  -> mRNA_P_Dpt()@Compartment__cell fRate121() #Modifiers(PROTEIN_P_Gcm)
	GENE_P_Dri_transcription_0_reactants_0: 0  -> GENE_P_Dri()@Compartment__cell -1*(fRate122()) #Modifiers(PROTEIN_P_Alx1, PROTEIN_P_Ets1)
	GENE_P_Dri_transcription_0_products_0: 0  -> mRNA_P_Dri()@Compartment__cell fRate122() #Modifiers(PROTEIN_P_Alx1, PROTEIN_P_Ets1)
	GENE_P_Endo16_transcription_0_reactants_0: 0  -> GENE_P_Endo16()@Compartment__cell -1*(fRate123()) #Modifiers(PROTEIN_P_Otx, PROTEIN_P_Brn)
	GENE_P_Endo16_transcription_0_products_0: 0  -> mRNA_P_Endo16()@Compartment__cell fRate123() #Modifiers(PROTEIN_P_Otx, PROTEIN_P_Brn)
	GENE_P_Erg_transcription_0_reactants_0: 0  -> GENE_P_Erg()@Compartment__cell -1*(fRate124()) #Modifiers(PROTEIN_P_TBr, PROTEIN_P_Ets1, PROTEIN_P_Hex)
	GENE_P_Erg_transcription_0_products_0: 0  -> mRNA_P_Erg()@Compartment__cell fRate124() #Modifiers(PROTEIN_P_TBr, PROTEIN_P_Ets1, PROTEIN_P_Hex)
	GENE_P_Ets1_transcription_0_reactants_0: 0  -> GENE_P_Ets1()@Compartment__cell -1*(fRate125()) #Modifiers(PROTEIN_P_UbiqEts1, PROTEIN_P_HesC)
	GENE_P_Ets1_transcription_0_products_0: 0  -> mRNA_P_Ets1()@Compartment__cell fRate125() #Modifiers(PROTEIN_P_UbiqEts1, PROTEIN_P_HesC)
	GENE_P_Eve_transcription_0_reactants_0: 0  -> GENE_P_Eve()@Compartment__cell -1*(fRate126()) #Modifiers(PROTEIN_P_Blimp1, PROTEIN_P_nBTCF, PROTEIN_P_GroTCF, PROTEIN_P_Hox)
	GENE_P_Eve_transcription_0_products_0: 0  -> mRNA_P_Eve()@Compartment__cell fRate126() #Modifiers(PROTEIN_P_Blimp1, PROTEIN_P_nBTCF, PROTEIN_P_GroTCF, PROTEIN_P_Hox)
	GENE_P_Ficolin_transcription_0_reactants_0: 0  -> GENE_P_Ficolin()@Compartment__cell -1*(fRate127()) #Modifiers(PROTEIN_P_Ets1, PROTEIN_P_Hnf6, PROTEIN_P_Hex, PROTEIN_P_Erg)
	GENE_P_Ficolin_transcription_0_products_0: 0  -> mRNA_P_Ficolin()@Compartment__cell fRate127() #Modifiers(PROTEIN_P_Ets1, PROTEIN_P_Hnf6, PROTEIN_P_Hex, PROTEIN_P_Erg)
	GENE_P_FoxA_transcription_0_reactants_0: 0  -> GENE_P_FoxA()@Compartment__cell -1*(fRate128()) #Modifiers(PROTEIN_P_GataE, PROTEIN_P_nBTCF, PROTEIN_P_Otx, PROTEIN_P_Bra, PROTEIN_P_Tgif, PROTEIN_P_GroTFC, PROTEIN_P_FoxA)
	GENE_P_FoxA_transcription_0_products_0: 0  -> mRNA_P_FoxA()@Compartment__cell fRate128() #Modifiers(PROTEIN_P_GataE, PROTEIN_P_nBTCF, PROTEIN_P_Otx, PROTEIN_P_Bra, PROTEIN_P_Tgif, PROTEIN_P_GroTFC, PROTEIN_P_FoxA)
	GENE_P_FoxB_transcription_0_reactants_0: 0  -> GENE_P_FoxB()@Compartment__cell -1*(fRate129()) #Modifiers(PROTEIN_P_Alx1, PROTEIN_P_Ets1, PROTEIN_P_TBr, PROTEIN_P_Dri, PROTEIN_P_FoxB)
	GENE_P_FoxB_transcription_0_products_0: 0  -> mRNA_P_FoxB()@Compartment__cell fRate129() #Modifiers(PROTEIN_P_Alx1, PROTEIN_P_Ets1, PROTEIN_P_TBr, PROTEIN_P_Dri, PROTEIN_P_FoxB)
	GENE_P_FoxN23_transcription_0_reactants_0: 0  -> GENE_P_FoxN23()@Compartment__cell -1*(fRate130()) #Modifiers(PROTEIN_P_nBTCF)
	GENE_P_FoxN23_transcription_0_products_0: 0  -> mRNA_P_FoxN23()@Compartment__cell fRate130() #Modifiers(PROTEIN_P_nBTCF)
	GENE_P_FoxO_transcription_0_reactants_0: 0  -> GENE_P_FoxO()@Compartment__cell -1*(fRate131()) #Modifiers(PROTEIN_P_Ets1, PROTEIN_P_Hex, PROTEIN_P_Tgif, PROTEIN_P_Erg)
	GENE_P_FoxO_transcription_0_products_0: 0  -> mRNA_P_FoxO()@Compartment__cell fRate131() #Modifiers(PROTEIN_P_Ets1, PROTEIN_P_Hex, PROTEIN_P_Tgif, PROTEIN_P_Erg)
	GENE_P_FvMo_transcription_0_reactants_0: 0  -> GENE_P_FvMo()@Compartment__cell -1*(fRate132()) #Modifiers(PROTEIN_P_Gcm, PROTEIN_P_GataE)
	GENE_P_FvMo_transcription_0_products_0: 0  -> mRNA_P_FvMo()@Compartment__cell fRate132() #Modifiers(PROTEIN_P_Gcm, PROTEIN_P_GataE)
	GENE_P_GataC_transcription_0_reactants_0: 0  -> GENE_P_GataC()@Compartment__cell -1*(fRate133()) #Modifiers(PROTEIN_P_GataE, PROTEIN_P_Hnf6, PROTEIN_GCM, PROTEIN_P_GataC)
	GENE_P_GataC_transcription_0_products_0: 0  -> mRNA_P_GataC()@Compartment__cell fRate133() #Modifiers(PROTEIN_P_GataE, PROTEIN_P_Hnf6, PROTEIN_GCM, PROTEIN_P_GataC)
	GENE_P_GataE_transcription_0_reactants_0: 0  -> GENE_P_GataE()@Compartment__cell -1*(fRate134()) #Modifiers(PROTEIN_P_Otx, PROTEIN_P_SuHN, PROTEIN_P_Hox)
	GENE_P_GataE_transcription_0_products_0: 0  -> mRNA_P_GataE()@Compartment__cell fRate134() #Modifiers(PROTEIN_P_Otx, PROTEIN_P_SuHN, PROTEIN_P_Hox)
	GENE_P_Gcad_transcription_0_reactants_0: 0  -> GENE_P_Gcad()@Compartment__cell -1*(fRate135()) #Modifiers(PROTEIN_P_UbiqGcad, PROTEIN_P_Snail)
	GENE_P_Gcad_transcription_0_products_0: 0  -> mRNA_P_Gcad()@Compartment__cell fRate135() #Modifiers(PROTEIN_P_UbiqGcad, PROTEIN_P_Snail)
	GENE_P_Gcm_transcription_0_reactants_0: 0  -> GENE_P_Gcm()@Compartment__cell -1*(fRate136()) #Modifiers(PROTEIN_P_nBTCF, PROTEIN_P_SuHN, PROTEIN_P_Gcm, PROTEIN_P_GroTCF, PROTEIN_P_FoxA, PROTEIN_P_Alx1)
	GENE_P_Gcm_transcription_0_products_0: 0  -> mRNA_P_Gcm()@Compartment__cell fRate136() #Modifiers(PROTEIN_P_nBTCF, PROTEIN_P_SuHN, PROTEIN_P_Gcm, PROTEIN_P_GroTCF, PROTEIN_P_FoxA, PROTEIN_P_Alx1)
	GENE_P_Gelsolin_transcription_0_reactants_0: 0  -> GENE_P_Gelsolin()@Compartment__cell -1*(fRate137()) #Modifiers(PROTEIN_P_Bra)
	GENE_P_Gelsolin_transcription_0_products_0: 0  -> mRNA_P_Gelsolin()@Compartment__cell fRate137() #Modifiers(PROTEIN_P_Bra)
	GENE_P_HesC_transcription_0_reactants_0: 0  -> GENE_P_HesC()@Compartment__cell -1*(fRate138()) #Modifiers(PROTEIN_P_UbiqHesC, PROTEIN_P_Pmar1)
	GENE_P_HesC_transcription_0_products_0: 0  -> mRNA_P_HesC()@Compartment__cell fRate138() #Modifiers(PROTEIN_P_UbiqHesC, PROTEIN_P_Pmar1)
	GENE_P_Hex_transcription_0_reactants_0: 0  -> GENE_P_Hex()@Compartment__cell -1*(fRate139()) #Modifiers(PROTEIN_P_Tgif, PROTEIN_P_Ets1, PROTEIN_P_Erg)
	GENE_P_Hex_transcription_0_products_0: 0  -> mRNA_P_Hex()@Compartment__cell fRate139() #Modifiers(PROTEIN_P_Tgif, PROTEIN_P_Ets1, PROTEIN_P_Erg)
	GENE_P_Hnf6_transcription_0_reactants_0: 0  -> GENE_P_Hnf6()@Compartment__cell -1*(fRate140()) #Modifiers(PROTEIN_P_UbiqHnf6)
	GENE_P_Hnf6_transcription_0_products_0: 0  -> mRNA_P_Hnf6()@Compartment__cell fRate140() #Modifiers(PROTEIN_P_UbiqHnf6)
	GENE_P_Hox_transcription_0_reactants_0: 0  -> GENE_P_Hox()@Compartment__cell -1*(fRate141()) #Modifiers(PROTEIN_P_Blimp1, PROTEIN_P_nBTCF, PROTEIN_P_Eve, PROTEIN_P_Otx, PROTEIN_P_GroTCF)
	GENE_P_Hox_transcription_0_products_0: 0  -> mRNA_P_Hox()@Compartment__cell fRate141() #Modifiers(PROTEIN_P_Blimp1, PROTEIN_P_nBTCF, PROTEIN_P_Eve, PROTEIN_P_Otx, PROTEIN_P_GroTCF)
	GENE_P_Kakapo_transcription_0_reactants_0: 0  -> GENE_P_Kakapo()@Compartment__cell -1*(fRate142()) #Modifiers(PROTEIN_P_Bra)
	GENE_P_Kakapo_transcription_0_products_0: 0  -> mRNA_P_Kakapo()@Compartment__cell fRate142() #Modifiers(PROTEIN_P_Bra)
	GENE_P_Lim_transcription_0_reactants_0: 0  -> GENE_P_Lim()@Compartment__cell -1*(fRate143()) #Modifiers(PROTEIN_P_GataE, PROTEIN_P_Otx)
	GENE_P_Lim_transcription_0_products_0: 0  -> mRNA_P_Lim()@Compartment__cell fRate143() #Modifiers(PROTEIN_P_GataE, PROTEIN_P_Otx)
	GENE_P_Msp130_transcription_0_reactants_0: 0  -> GENE_P_Msp130()@Compartment__cell -1*(fRate144()) #Modifiers(PROTEIN_P_Hnf6, PROTEIN_P_FoxB, PROTEIN_P_Ets1, PROTEIN_P_Alx1, PROTEIN_P_Hex, PROTEIN_P_TBr, PROTEIN_P_Erg)
	GENE_P_Msp130_transcription_0_products_0: 0  -> mRNA_P_Msp130()@Compartment__cell fRate144() #Modifiers(PROTEIN_P_Hnf6, PROTEIN_P_FoxB, PROTEIN_P_Ets1, PROTEIN_P_Alx1, PROTEIN_P_Hex, PROTEIN_P_TBr, PROTEIN_P_Erg)
	GENE_P_MspL_transcription_0_reactants_0: 0  -> GENE_P_MspL()@Compartment__cell -1*(fRate145()) #Modifiers(PROTEIN_P_Ets1, PROTEIN_P_Alx1, PROTEIN_P_VEGFSignal, PROTEIN_P_Hex, PROTEIN_P_Erg)
	GENE_P_MspL_transcription_0_products_0: 0  -> mRNA_P_MspL()@Compartment__cell fRate145() #Modifiers(PROTEIN_P_Ets1, PROTEIN_P_Alx1, PROTEIN_P_VEGFSignal, PROTEIN_P_Hex, PROTEIN_P_Erg)
	GENE_P_Not_transcription_0_reactants_0: 0  -> GENE_P_Not()@Compartment__cell -1*(fRate146()) #Modifiers(PROTEIN_P_GataE)
	GENE_P_Not_transcription_0_products_0: 0  -> mRNA_P_Not()@Compartment__cell fRate146() #Modifiers(PROTEIN_P_GataE)
	GENE_P_Nrl_transcription_0_reactants_0: 0  -> GENE_P_Nrl()@Compartment__cell -1*(fRate147()) #Modifiers(PROTEIN_P_TBr, PROTEIN_P_UMANrl, PROTEIN_P_FoxN23, PROTEIN_P_GataE, PROTEIN_P_HesC, PROTEIN_P_Tgif)
	GENE_P_Nrl_transcription_0_products_0: 0  -> mRNA_P_Nrl()@Compartment__cell fRate147() #Modifiers(PROTEIN_P_TBr, PROTEIN_P_UMANrl, PROTEIN_P_FoxN23, PROTEIN_P_GataE, PROTEIN_P_HesC, PROTEIN_P_Tgif)
	GENE_P_OrCt_transcription_0_reactants_0: 0  -> GENE_P_OrCt()@Compartment__cell -1*(fRate148()) #Modifiers(PROTEIN_P_Bra, PROTEIN_P_Hox)
	GENE_P_OrCt_transcription_0_products_0: 0  -> mRNA_P_OrCt()@Compartment__cell fRate148() #Modifiers(PROTEIN_P_Bra, PROTEIN_P_Hox)
	GENE_P_Otx_transcription_0_reactants_0: 0  -> GENE_P_Otx()@Compartment__cell -1*(fRate149()) #Modifiers(PROTEIN_P_UVAOtx, PROTEIN_P_Blimp1, PROTEIN_P_GataE, PROTEIN_P_Otx)
	GENE_P_Otx_transcription_0_products_0: 0  -> mRNA_P_Otx()@Compartment__cell fRate149() #Modifiers(PROTEIN_P_UVAOtx, PROTEIN_P_Blimp1, PROTEIN_P_GataE, PROTEIN_P_Otx)
	GENE_P_Pks_transcription_0_reactants_0: 0  -> GENE_P_Pks()@Compartment__cell -1*(fRate150()) #Modifiers(PROTEIN_P_Gcm, PROTEIN_P_GataE)
	GENE_P_Pks_transcription_0_products_0: 0  -> mRNA_P_Pks()@Compartment__cell fRate150() #Modifiers(PROTEIN_P_Gcm, PROTEIN_P_GataE)
	GENE_P_Pmar1_transcription_0_reactants_0: 0  -> GENE_P_Pmar1()@Compartment__cell -1*(fRate151()) #Modifiers(PROTEIN_P_nBTCF, PROTEIN_P_Otx, PROTEIN_P_GroTCF)
	GENE_P_Pmar1_transcription_0_products_0: 0  -> mRNA_P_Pmar1()@Compartment__cell fRate151() #Modifiers(PROTEIN_P_nBTCF, PROTEIN_P_Otx, PROTEIN_P_GroTCF)
	GENE_P_Sm27_transcription_0_reactants_0: 0  -> GENE_P_Sm27()@Compartment__cell -1*(fRate152()) #Modifiers(PROTEIN_P_Dri, PROTEIN_P_Hnf6, PROTEIN_P_Ets1, PROTEIN_P_Alx1, PROTEIN_P_Tel, PROTEIN_P_Hex, PROTEIN_P_Erg)
	GENE_P_Sm27_transcription_0_products_0: 0  -> mRNA_P_Sm27()@Compartment__cell fRate152() #Modifiers(PROTEIN_P_Dri, PROTEIN_P_Hnf6, PROTEIN_P_Ets1, PROTEIN_P_Alx1, PROTEIN_P_Tel, PROTEIN_P_Hex, PROTEIN_P_Erg)
	GENE_P_Sm30_transcription_0_reactants_0: 0  -> GENE_P_Sm30()@Compartment__cell -1*(fRate153()) #Modifiers(PROTEIN_P_VEGFSignal)
	GENE_P_Sm30_transcription_0_products_0: 0  -> mRNA_P_Sm30()@Compartment__cell fRate153() #Modifiers(PROTEIN_P_VEGFSignal)
	GENE_P_Sm50_transcription_0_reactants_0: 0  -> GENE_P_Sm50()@Compartment__cell -1*(fRate154()) #Modifiers(PROTEIN_P_Dri, PROTEIN_P_Hnf6, PROTEIN_P_Ets1, PROTEIN_P_Alx1, PROTEIN_P_Tel, PROTEIN_P_Hex, PROTEIN_P_Erg, PROTEIN_P_VEGFSignal)
	GENE_P_Sm50_transcription_0_products_0: 0  -> mRNA_P_Sm50()@Compartment__cell fRate154() #Modifiers(PROTEIN_P_Dri, PROTEIN_P_Hnf6, PROTEIN_P_Ets1, PROTEIN_P_Alx1, PROTEIN_P_Tel, PROTEIN_P_Hex, PROTEIN_P_Erg, PROTEIN_P_VEGFSignal)
	GENE_P_Snail_transcription_0_reactants_0: 0  -> GENE_P_Snail()@Compartment__cell -1*(fRate155()) #Modifiers(PROTEIN_P_Hex)
	GENE_P_Snail_transcription_0_products_0: 0  -> mRNA_P_Snail()@Compartment__cell fRate155() #Modifiers(PROTEIN_P_Hex)
	GENE_P_SoxB1_transcription_0_reactants_0: 0  -> GENE_P_SoxB1()@Compartment__cell -1*(fRate156()) #Modifiers(PROTEIN_P_UbiqSoxB1, PROTEIN_P_SoxB1)
	GENE_P_SoxB1_transcription_0_products_0: 0  -> mRNA_P_SoxB1()@Compartment__cell fRate156() #Modifiers(PROTEIN_P_UbiqSoxB1, PROTEIN_P_SoxB1)
	GENE_P_SoxC_transcription_0_reactants_0: 0  -> GENE_P_SoxC()@Compartment__cell -1*(fRate157()) #Modifiers(PROTEIN_P_UbiqSoxC, PROTEIN_P_HesC, PROTEIN_P_SoxC)
	GENE_P_SoxC_transcription_0_products_0: 0  -> mRNA_P_SoxC()@Compartment__cell fRate157() #Modifiers(PROTEIN_P_UbiqSoxC, PROTEIN_P_HesC, PROTEIN_P_SoxC)
	GENE_P_SuTx_transcription_0_reactants_0: 0  -> GENE_P_SuTx()@Compartment__cell -1*(fRate158()) #Modifiers(PROTEIN_P_Gcm, PROTEIN_P_GataE)
	GENE_P_SuTx_transcription_0_products_0: 0  -> mRNA_P_SuTx()@Compartment__cell fRate158() #Modifiers(PROTEIN_P_Gcm, PROTEIN_P_GataE)
	GENE_P_TBr_transcription_0_reactants_0: 0  -> GENE_P_TBr()@Compartment__cell -1*(fRate159()) #Modifiers(PROTEIN_P_Ets1, PROTEIN_P_HesC, PROTEIN_P_TBr)
	GENE_P_TBr_transcription_0_products_0: 0  -> mRNA_P_TBr()@Compartment__cell fRate159() #Modifiers(PROTEIN_P_Ets1, PROTEIN_P_HesC, PROTEIN_P_TBr)
	GENE_P_Tel_transcription_0_reactants_0: 0  -> GENE_P_Tel()@Compartment__cell -1*(fRate160()) #Modifiers(PROTEIN_P_UbiqTel, PROTEIN_P_Tel, PROTEIN_P_HesC)
	GENE_P_Tel_transcription_0_products_0: 0  -> mRNA_P_Tel()@Compartment__cell fRate160() #Modifiers(PROTEIN_P_UbiqTel, PROTEIN_P_Tel, PROTEIN_P_HesC)
	GENE_P_Tgif_transcription_0_reactants_0: 0  -> GENE_P_Tgif()@Compartment__cell -1*(fRate161()) #Modifiers(PROTEIN_P_Tgif, PROTEIN_P_Ets1, PROTEIN_P_Erg, PROTEIN_P_Hex)
	GENE_P_Tgif_transcription_0_products_0: 0  -> mRNA_P_Tgif()@Compartment__cell fRate161() #Modifiers(PROTEIN_P_Tgif, PROTEIN_P_Ets1, PROTEIN_P_Erg, PROTEIN_P_Hex)
	GENE_P_VEGFR_transcription_0_reactants_0: 0  -> GENE_P_VEGFR()@Compartment__cell -1*(fRate162()) #Modifiers(PROTEIN_P_Alx1, PROTEIN_P_Dri, PROTEIN_P_Ets1, PROTEIN_P_Hex)
	GENE_P_VEGFR_transcription_0_products_0: 0  -> mRNA_P_VEGFR()@Compartment__cell fRate162() #Modifiers(PROTEIN_P_Alx1, PROTEIN_P_Dri, PROTEIN_P_Ets1, PROTEIN_P_Hex)
	GENE_P_Wnt8_transcription_0_reactants_0: 0  -> GENE_P_Wnt8()@Compartment__cell -1*(fRate163()) #Modifiers(PROTEIN_P_nBTCF, PROTEIN_P_Blimp1, PROTEIN_P_GroTCF)
	GENE_P_Wnt8_transcription_0_products_0: 0  -> mRNA_P_Wnt8()@Compartment__cell fRate163() #Modifiers(PROTEIN_P_nBTCF, PROTEIN_P_Blimp1, PROTEIN_P_GroTCF)
	GENE_P_z13_transcription_0_reactants_0: 0  -> GENE_P_z13()@Compartment__cell -1*(fRate164()) #Modifiers(PROTEIN_P_nBTCF, PROTEIN_P_GroTCF, PROTEIN_P_Hnf6)
	GENE_P_z13_transcription_0_products_0: 0  -> mRNA_P_z13()@Compartment__cell fRate164() #Modifiers(PROTEIN_P_nBTCF, PROTEIN_P_GroTCF, PROTEIN_P_Hnf6)
	M_Gcad_Hill_Kinetic_0_reactants_0: 0  -> PRE_M_Gcad()@Compartment__cell -1*(fRate165())
	M_Gcad_Hill_Kinetic_0_products_0: 0  -> mRNA_M_Gcad()@Compartment__cell fRate165()
	M_Notch_Hill_Kinetic_0_reactants_0: 0  -> PRE_M_Notch()@Compartment__cell -1*(fRate166())
	M_Notch_Hill_Kinetic_0_products_0: 0  -> mRNA_M_Notch()@Compartment__cell fRate166()
	M_Otx_Hill_Kinetic_0_reactants_0: 0  -> PRE_M_Otx()@Compartment__cell -1*(fRate167())
	M_Otx_Hill_Kinetic_0_products_0: 0  -> mRNA_M_Otx()@Compartment__cell fRate167()
	M_SoxB1_Hill_Kinetic_0_reactants_0: 0  -> PRE_M_SoxB1()@Compartment__cell -1*(fRate168())
	M_SoxB1_Hill_Kinetic_0_products_0: 0  -> mRNA_M_SoxB1()@Compartment__cell fRate168()
	M_SuH_Hill_Kinetic_0_reactants_0: 0  -> PRE_M_SuH()@Compartment__cell -1*(fRate169())
	M_SuH_Hill_Kinetic_0_products_0: 0  -> mRNA_M_SuH()@Compartment__cell fRate169()
	M_UMADelta_Hill_Kinetic_0_reactants_0: 0  -> PRE_M_UMADelta()@Compartment__cell -1*(fRate170())
	M_UMADelta_Hill_Kinetic_0_products_0: 0  -> mRNA_M_UMADelta()@Compartment__cell fRate170()
	M_UMANrl_Hill_Kinetic_0_reactants_0: 0  -> PRE_M_UMANrl()@Compartment__cell -1*(fRate171())
	M_UMANrl_Hill_Kinetic_0_products_0: 0  -> mRNA_M_UMANrl()@Compartment__cell fRate171()
	M_UMR_Hill_Kinetic_0_reactants_0: 0  -> PRE_M_UMR()@Compartment__cell -1*(fRate172())
	M_UMR_Hill_Kinetic_0_products_0: 0  -> mRNA_M_UMR()@Compartment__cell fRate172()
	M_UbiqSoxB1_Hill_Kinetic_0_reactants_0: 0  -> PRE_M_UbiqSoxB1()@Compartment__cell -1*(fRate173())
	M_UbiqSoxB1_Hill_Kinetic_0_products_0: 0  -> mRNA_M_UbiqSoxB1()@Compartment__cell fRate173()
	M_cB_Hill_Kinetic_0_reactants_0: 0  -> PRE_M_cB()@Compartment__cell -1*(fRate174())
	M_cB_Hill_Kinetic_0_products_0: 0  -> mRNA_M_cB()@Compartment__cell fRate174()
	PROTEIN_E_Alx1_degradation_0: PROTEIN_E_Alx1()@Compartment__cell -> none()@Compartment__outside r176_P_protein_deg #Modifiers(none)
	PROTEIN_E_Apobec_degradation_0: PROTEIN_E_Apobec()@Compartment__cell -> none()@Compartment__outside r177_P_protein_deg #Modifiers(none)
	PROTEIN_E_Blimp1_degradation_0: PROTEIN_E_Blimp1()@Compartment__cell -> none()@Compartment__outside r178_P_protein_deg #Modifiers(none)
	PROTEIN_E_Bra_degradation_0: PROTEIN_E_Bra()@Compartment__cell -> none()@Compartment__outside r179_P_protein_deg #Modifiers(none)
	PROTEIN_E_Brn_degradation_0: PROTEIN_E_Brn()@Compartment__cell -> none()@Compartment__outside r180_P_protein_deg #Modifiers(none)
	PROTEIN_E_CAPK_degradation_0: PROTEIN_E_CAPK()@Compartment__cell -> none()@Compartment__outside r181_P_protein_deg #Modifiers(none)
	PROTEIN_E_CyP_degradation_0: PROTEIN_E_CyP()@Compartment__cell -> none()@Compartment__outside r182_P_protein_deg #Modifiers(none)
	PROTEIN_E_Delta_activation_0: PROTEIN_E_Delta2()@Compartment__cell -> PROTEIN_E_Delta()@Compartment__cell fRate182() #Modifiers(PROTEIN_E_Nrl)
	PROTEIN_E_Delta_degradation_0: PROTEIN_E_Delta()@Compartment__cell -> none()@Compartment__outside r184_P_protein_deg #Modifiers(none)
	PROTEIN_E_Delta_inactivation_0: PROTEIN_E_Delta()@Compartment__cell -> PROTEIN_E_Delta2()@Compartment__cell r185_P_inactivation_k
	PROTEIN_E_Dpt_degradation_0: PROTEIN_E_Dpt()@Compartment__cell -> none()@Compartment__outside r186_P_protein_deg #Modifiers(none)
	PROTEIN_E_Dri_degradation_0: PROTEIN_E_Dri()@Compartment__cell -> none()@Compartment__outside r187_P_protein_deg #Modifiers(none)
	PROTEIN_E_ES_degradation_0: PROTEIN_E_ES()@Compartment__cell -> none()@Compartment__outside r188_P_protein_deg #Modifiers(none)
	PROTEIN_E_Endo16_degradation_0: PROTEIN_E_Endo16()@Compartment__cell -> none()@Compartment__outside r189_P_protein_deg #Modifiers(none)
	PROTEIN_E_Erg_degradation_0: PROTEIN_E_Erg()@Compartment__cell -> none()@Compartment__outside r190_P_protein_deg #Modifiers(none)
	PROTEIN_E_Ets1_degradation_0: PROTEIN_E_Ets1()@Compartment__cell -> none()@Compartment__outside r191_P_protein_deg #Modifiers(none)
	PROTEIN_E_Eve_degradation_0: PROTEIN_E_Eve()@Compartment__cell -> none()@Compartment__outside r192_P_protein_deg #Modifiers(none)
	PROTEIN_E_Ficolin_degradation_0: PROTEIN_E_Ficolin()@Compartment__cell -> none()@Compartment__outside r193_P_protein_deg #Modifiers(none)
	PROTEIN_E_FoxA_degradation_0: PROTEIN_E_FoxA()@Compartment__cell -> none()@Compartment__outside r194_P_protein_deg #Modifiers(none)
	PROTEIN_E_FoxB_degradation_0: PROTEIN_E_FoxB()@Compartment__cell -> none()@Compartment__outside r195_P_protein_deg #Modifiers(none)
	PROTEIN_E_FoxN23_degradation_0: PROTEIN_E_FoxN23()@Compartment__cell -> none()@Compartment__outside r196_P_protein_deg #Modifiers(none)
	PROTEIN_E_FoxO_degradation_0: PROTEIN_E_FoxO()@Compartment__cell -> none()@Compartment__outside r197_P_protein_deg #Modifiers(none)
	PROTEIN_E_FvMo_degradation_0: PROTEIN_E_FvMo()@Compartment__cell -> none()@Compartment__outside r198_P_protein_deg #Modifiers(none)
	PROTEIN_E_GSK3_i_activation_0: PROTEIN_E_GSK3_a()@Compartment__cell -> PROTEIN_E_GSK3_i()@Compartment__cell fRate198() #Modifiers(PROTEIN_E_frizzled_a)
	PROTEIN_E_GSK3_i_inactivation_0: PROTEIN_E_GSK3_i()@Compartment__cell -> PROTEIN_E_GSK3_a()@Compartment__cell r200_P_inactivation_k
	PROTEIN_E_GataC_degradation_0: PROTEIN_E_GataC()@Compartment__cell -> none()@Compartment__outside r201_P_protein_deg #Modifiers(none)
	PROTEIN_E_GataE_degradation_0: PROTEIN_E_GataE()@Compartment__cell -> none()@Compartment__outside r202_P_protein_deg #Modifiers(none)
	PROTEIN_E_Gcad_degradation_0: PROTEIN_E_Gcad()@Compartment__cell -> none()@Compartment__outside r203_P_protein_deg #Modifiers(none)
	PROTEIN_E_Gcm_degradation_0: PROTEIN_E_Gcm()@Compartment__cell -> none()@Compartment__outside r204_P_protein_deg #Modifiers(none)
	PROTEIN_E_Gelsolin_degradation_0: PROTEIN_E_Gelsolin()@Compartment__cell -> none()@Compartment__outside r205_P_protein_deg #Modifiers(none)
	PROTEIN_E_GroTCF_accociation_0: PROTEIN_E_Gro()@Compartment__cell + PROTEIN_E_TCF()@Compartment__cell -> PROTEIN_E_GroTCF()@Compartment__cell r206_P_association_k
	PROTEIN_E_GroTCF_dissociation_0: PROTEIN_E_GroTCF()@Compartment__cell -> PROTEIN_E_Gro()@Compartment__cell + PROTEIN_E_TCF()@Compartment__cell r207_P_dissociation_k
	PROTEIN_E_HesC_degradation_0: PROTEIN_E_HesC()@Compartment__cell -> none()@Compartment__outside r208_P_protein_deg #Modifiers(none)
	PROTEIN_E_Hex_degradation_0: PROTEIN_E_Hex()@Compartment__cell -> none()@Compartment__outside r209_P_protein_deg #Modifiers(none)
	PROTEIN_E_Hnf6_degradation_0: PROTEIN_E_Hnf6()@Compartment__cell -> none()@Compartment__outside r210_P_protein_deg #Modifiers(none)
	PROTEIN_E_Hox_degradation_0: PROTEIN_E_Hox()@Compartment__cell -> none()@Compartment__outside r211_P_protein_deg #Modifiers(none)
	PROTEIN_E_Kakapo_degradation_0: PROTEIN_E_Kakapo()@Compartment__cell -> none()@Compartment__outside r212_P_protein_deg #Modifiers(none)
	PROTEIN_E_Lim_degradation_0: PROTEIN_E_Lim()@Compartment__cell -> none()@Compartment__outside r213_P_protein_deg #Modifiers(none)
	PROTEIN_E_Msp130_degradation_0: PROTEIN_E_Msp130()@Compartment__cell -> none()@Compartment__outside r214_P_protein_deg #Modifiers(none)
	PROTEIN_E_MspL_degradation_0: PROTEIN_E_MspL()@Compartment__cell -> none()@Compartment__outside r215_P_protein_deg #Modifiers(none)
	PROTEIN_E_Not_degradation_0: PROTEIN_E_Not()@Compartment__cell -> none()@Compartment__outside r216_P_protein_deg #Modifiers(none)
	PROTEIN_E_Notch_activation_0: PROTEIN_E_Notch2()@Compartment__cell -> PROTEIN_E_Notch()@Compartment__cell fRate216() #Modifiers(PROTEIN_E_Delta2)
	PROTEIN_E_Notch_degradation_0: PROTEIN_E_Notch()@Compartment__cell -> none()@Compartment__outside r218_P_protein_deg #Modifiers(none)
	PROTEIN_E_Notch_inactivation_0: PROTEIN_E_Notch()@Compartment__cell -> PROTEIN_E_Notch2()@Compartment__cell r219_P_inactivation_k
	PROTEIN_E_Nrl_degradation_0: PROTEIN_E_Nrl()@Compartment__cell -> none()@Compartment__outside r220_P_protein_deg #Modifiers(none)
	PROTEIN_E_OrCt_degradation_0: PROTEIN_E_OrCt()@Compartment__cell -> none()@Compartment__outside r221_P_protein_deg #Modifiers(none)
	PROTEIN_E_Otx_degradation_0: PROTEIN_E_Otx()@Compartment__cell -> none()@Compartment__outside r222_P_protein_deg #Modifiers(none)
	PROTEIN_E_Pks_degradation_0: PROTEIN_E_Pks()@Compartment__cell -> none()@Compartment__outside r223_P_protein_deg #Modifiers(none)
	PROTEIN_E_Pmar1_degradation_0: PROTEIN_E_Pmar1()@Compartment__cell -> none()@Compartment__outside r224_P_protein_deg #Modifiers(none)
	PROTEIN_E_Sm27_degradation_0: PROTEIN_E_Sm27()@Compartment__cell -> none()@Compartment__outside r225_P_protein_deg #Modifiers(none)
	PROTEIN_E_Sm30_degradation_0: PROTEIN_E_Sm30()@Compartment__cell -> none()@Compartment__outside r226_P_protein_deg #Modifiers(none)
	PROTEIN_E_Sm50_degradation_0: PROTEIN_E_Sm50()@Compartment__cell -> none()@Compartment__outside r227_P_protein_deg #Modifiers(none)
	PROTEIN_E_Snail_degradation_0: PROTEIN_E_Snail()@Compartment__cell -> none()@Compartment__outside r228_P_protein_deg #Modifiers(none)
	PROTEIN_E_SoxB1_degradation_0: PROTEIN_E_SoxB1()@Compartment__cell -> none()@Compartment__outside r229_P_protein_deg #Modifiers(none)
	PROTEIN_E_SoxC_degradation_0: PROTEIN_E_SoxC()@Compartment__cell -> none()@Compartment__outside r230_P_protein_deg #Modifiers(none)
	PROTEIN_E_SuHN_accociation_0: PROTEIN_E_Notch2()@Compartment__cell + PROTEIN_E_SuH()@Compartment__cell -> PROTEIN_E_SuHN()@Compartment__cell r231_P_association_k
	PROTEIN_E_SuHN_dissociation_0: PROTEIN_E_SuHN()@Compartment__cell -> PROTEIN_E_Notch2()@Compartment__cell + PROTEIN_E_SuH()@Compartment__cell r232_P_dissociation_k
	PROTEIN_E_SuH_degradation_0: PROTEIN_E_SuH()@Compartment__cell -> none()@Compartment__outside r233_P_protein_deg #Modifiers(none)
	PROTEIN_E_SuTx_degradation_0: PROTEIN_E_SuTx()@Compartment__cell -> none()@Compartment__outside r234_P_protein_deg #Modifiers(none)
	PROTEIN_E_TBr_degradation_0: PROTEIN_E_TBr()@Compartment__cell -> none()@Compartment__outside r235_P_protein_deg #Modifiers(none)
	PROTEIN_E_Tel_degradation_0: PROTEIN_E_Tel()@Compartment__cell -> none()@Compartment__outside r236_P_protein_deg #Modifiers(none)
	PROTEIN_E_Tgif_degradation_0: PROTEIN_E_Tgif()@Compartment__cell -> none()@Compartment__outside r237_P_protein_deg #Modifiers(none)
	PROTEIN_E_UMR_degradation_0: PROTEIN_E_UMR()@Compartment__cell -> none()@Compartment__outside r238_P_protein_deg #Modifiers(none)
	PROTEIN_E_UVAOtx_degradation_0: PROTEIN_E_UVAOtx()@Compartment__cell -> none()@Compartment__outside r239_P_protein_deg #Modifiers(none)
	PROTEIN_E_UbiqSoxB1_degradation_0: PROTEIN_E_UbiqSoxB1()@Compartment__cell -> none()@Compartment__outside r240_P_protein_deg #Modifiers(none)
	PROTEIN_E_VEGFR_degradation_0: PROTEIN_E_VEGFR()@Compartment__cell -> none()@Compartment__outside r241_P_protein_deg #Modifiers(none)
	PROTEIN_E_VEGFSignal_accociation_0: PROTEIN_E_L1()@Compartment__cell + PROTEIN_E_VEGFR()@Compartment__cell + PROTEIN_E_VEGF()@Compartment__cell -> PROTEIN_E_VEGFSignal()@Compartment__cell r242_P_association_k
	PROTEIN_E_VEGFSignal_dissociation_0: PROTEIN_E_VEGFSignal()@Compartment__cell -> PROTEIN_E_L1()@Compartment__cell + PROTEIN_E_VEGFR()@Compartment__cell + PROTEIN_E_VEGF()@Compartment__cell r243_P_dissociation_k
	PROTEIN_E_VEGF_degradation_0: PROTEIN_E_VEGF()@Compartment__cell -> none()@Compartment__outside r244_P_protein_deg #Modifiers(none)
	PROTEIN_E_Wnt8_degradation_0: PROTEIN_E_Wnt8()@Compartment__cell -> none()@Compartment__outside r245_P_protein_deg #Modifiers(none)
	PROTEIN_E_cB_a_degradation_0: PROTEIN_E_cB()@Compartment__cell -> 0  fRate245() #Modifiers(PROTEIN_E_GSK3_a)
	PROTEIN_E_cB_degradation_0: PROTEIN_E_cB()@Compartment__cell -> none()@Compartment__outside r247_P_protein_deg #Modifiers(none)
	PROTEIN_E_frizzled_a_activation_0: PROTEIN_E_frizzled_i()@Compartment__cell -> PROTEIN_E_frizzled_a()@Compartment__cell fRate247() #Modifiers(PROTEIN_E_Wnt8)
	PROTEIN_E_frizzled_a_inactivation_0: PROTEIN_E_frizzled_a()@Compartment__cell -> PROTEIN_E_frizzled_i()@Compartment__cell r249_P_inactivation_k
	PROTEIN_E_nBTCF_accociation_0: PROTEIN_E_cB()@Compartment__cell + PROTEIN_E_TCF()@Compartment__cell -> PROTEIN_E_nBTCF()@Compartment__cell r250_P_association_k
	PROTEIN_E_nBTCF_dissociation_0: PROTEIN_E_nBTCF()@Compartment__cell -> PROTEIN_E_cB()@Compartment__cell + PROTEIN_E_TCF()@Compartment__cell r251_P_dissociation_k
	PROTEIN_E_z13_degradation_0: PROTEIN_E_z13()@Compartment__cell -> none()@Compartment__outside r252_P_protein_deg #Modifiers(none)
	PROTEIN_M_Alx1_degradation_0: PROTEIN_M_Alx1()@Compartment__cell -> none()@Compartment__outside r253_P_protein_deg #Modifiers(none)
	PROTEIN_M_Apobec_degradation_0: PROTEIN_M_Apobec()@Compartment__cell -> none()@Compartment__outside r254_P_protein_deg #Modifiers(none)
	PROTEIN_M_Blimp1_degradation_0: PROTEIN_M_Blimp1()@Compartment__cell -> none()@Compartment__outside r255_P_protein_deg #Modifiers(none)
	PROTEIN_M_Bra_degradation_0: PROTEIN_M_Bra()@Compartment__cell -> none()@Compartment__outside r256_P_protein_deg #Modifiers(none)
	PROTEIN_M_Brn_degradation_0: PROTEIN_M_Brn()@Compartment__cell -> none()@Compartment__outside r257_P_protein_deg #Modifiers(none)
	PROTEIN_M_CAPK_degradation_0: PROTEIN_M_CAPK()@Compartment__cell -> none()@Compartment__outside r258_P_protein_deg #Modifiers(none)
	PROTEIN_M_CyP_degradation_0: PROTEIN_M_CyP()@Compartment__cell -> none()@Compartment__outside r259_P_protein_deg #Modifiers(none)
	PROTEIN_M_Delta_activation_0: PROTEIN_M_Delta2()@Compartment__cell -> PROTEIN_M_Delta()@Compartment__cell fRate259() #Modifiers(PROTEIN_M_Nrl)
	PROTEIN_M_Delta_degradation_0: PROTEIN_M_Delta()@Compartment__cell -> none()@Compartment__outside r261_P_protein_deg #Modifiers(none)
	PROTEIN_M_Delta_inactivation_0: PROTEIN_M_Delta()@Compartment__cell -> PROTEIN_M_Delta2()@Compartment__cell r262_P_inactivation_k
	PROTEIN_M_Dpt_degradation_0: PROTEIN_M_Dpt()@Compartment__cell -> none()@Compartment__outside r263_P_protein_deg #Modifiers(none)
	PROTEIN_M_Dri_degradation_0: PROTEIN_M_Dri()@Compartment__cell -> none()@Compartment__outside r264_P_protein_deg #Modifiers(none)
	PROTEIN_M_Endo16_degradation_0: PROTEIN_M_Endo16()@Compartment__cell -> none()@Compartment__outside r265_P_protein_deg #Modifiers(none)
	PROTEIN_M_Erg_degradation_0: PROTEIN_M_Erg()@Compartment__cell -> none()@Compartment__outside r266_P_protein_deg #Modifiers(none)
	PROTEIN_M_Ets1_degradation_0: PROTEIN_M_Ets1()@Compartment__cell -> none()@Compartment__outside r267_P_protein_deg #Modifiers(none)
	PROTEIN_M_Eve_degradation_0: PROTEIN_M_Eve()@Compartment__cell -> none()@Compartment__outside r268_P_protein_deg #Modifiers(none)
	PROTEIN_M_Ficolin_degradation_0: PROTEIN_M_Ficolin()@Compartment__cell -> none()@Compartment__outside r269_P_protein_deg #Modifiers(none)
	PROTEIN_M_FoxA_degradation_0: PROTEIN_M_FoxA()@Compartment__cell -> none()@Compartment__outside r270_P_protein_deg #Modifiers(none)
	PROTEIN_M_FoxB_degradation_0: PROTEIN_M_FoxB()@Compartment__cell -> none()@Compartment__outside r271_P_protein_deg #Modifiers(none)
	PROTEIN_M_FoxN23_degradation_0: PROTEIN_M_FoxN23()@Compartment__cell -> none()@Compartment__outside r272_P_protein_deg #Modifiers(none)
	PROTEIN_M_FoxO_degradation_0: PROTEIN_M_FoxO()@Compartment__cell -> none()@Compartment__outside r273_P_protein_deg #Modifiers(none)
	PROTEIN_M_FvMo_degradation_0: PROTEIN_M_FvMo()@Compartment__cell -> none()@Compartment__outside r274_P_protein_deg #Modifiers(none)
	PROTEIN_M_GSK3_i_activation_0: PROTEIN_M_GSK3_a()@Compartment__cell -> PROTEIN_M_GSK3_i()@Compartment__cell fRate274() #Modifiers(PROTEIN_M_frizzled_a)
	PROTEIN_M_GSK3_i_inactivation_0: PROTEIN_M_GSK3_i()@Compartment__cell -> PROTEIN_M_GSK3_a()@Compartment__cell r276_P_inactivation_k
	PROTEIN_M_GataC_degradation_0: PROTEIN_M_GataC()@Compartment__cell -> none()@Compartment__outside r277_P_protein_deg #Modifiers(none)
	PROTEIN_M_GataE_degradation_0: PROTEIN_M_GataE()@Compartment__cell -> none()@Compartment__outside r278_P_protein_deg #Modifiers(none)
	PROTEIN_M_Gcad_degradation_0: PROTEIN_M_Gcad()@Compartment__cell -> none()@Compartment__outside r279_P_protein_deg #Modifiers(none)
	PROTEIN_M_Gcm_degradation_0: PROTEIN_M_Gcm()@Compartment__cell -> none()@Compartment__outside r280_P_protein_deg #Modifiers(none)
	PROTEIN_M_Gelsolin_degradation_0: PROTEIN_M_Gelsolin()@Compartment__cell -> none()@Compartment__outside r281_P_protein_deg #Modifiers(none)
	PROTEIN_M_GroTCF_accociation_0: PROTEIN_M_Gro()@Compartment__cell + PROTEIN_M_TCF()@Compartment__cell -> PROTEIN_M_GroTCF()@Compartment__cell r282_P_association_k
	PROTEIN_M_GroTCF_dissociation_0: PROTEIN_M_GroTCF()@Compartment__cell -> PROTEIN_M_Gro()@Compartment__cell + PROTEIN_M_TCF()@Compartment__cell r283_P_dissociation_k
	PROTEIN_M_HesC_degradation_0: PROTEIN_M_HesC()@Compartment__cell -> none()@Compartment__outside r284_P_protein_deg #Modifiers(none)
	PROTEIN_M_Hex_degradation_0: PROTEIN_M_Hex()@Compartment__cell -> none()@Compartment__outside r285_P_protein_deg #Modifiers(none)
	PROTEIN_M_Hnf6_degradation_0: PROTEIN_M_Hnf6()@Compartment__cell -> none()@Compartment__outside r286_P_protein_deg #Modifiers(none)
	PROTEIN_M_Hox_degradation_0: PROTEIN_M_Hox()@Compartment__cell -> none()@Compartment__outside r287_P_protein_deg #Modifiers(none)
	PROTEIN_M_Kakapo_degradation_0: PROTEIN_M_Kakapo()@Compartment__cell -> none()@Compartment__outside r288_P_protein_deg #Modifiers(none)
	PROTEIN_M_Lim_degradation_0: PROTEIN_M_Lim()@Compartment__cell -> none()@Compartment__outside r289_P_protein_deg #Modifiers(none)
	PROTEIN_M_Msp130_degradation_0: PROTEIN_M_Msp130()@Compartment__cell -> none()@Compartment__outside r290_P_protein_deg #Modifiers(none)
	PROTEIN_M_MspL_degradation_0: PROTEIN_M_MspL()@Compartment__cell -> none()@Compartment__outside r291_P_protein_deg #Modifiers(none)
	PROTEIN_M_Not_degradation_0: PROTEIN_M_Not()@Compartment__cell -> none()@Compartment__outside r292_P_protein_deg #Modifiers(none)
	PROTEIN_M_Notch_activation_0: PROTEIN_M_Notch2()@Compartment__cell -> PROTEIN_M_Notch()@Compartment__cell fRate292() #Modifiers(PROTEIN_M_Delta2)
	PROTEIN_M_Notch_degradation_0: PROTEIN_M_Notch()@Compartment__cell -> none()@Compartment__outside r294_P_protein_deg #Modifiers(none)
	PROTEIN_M_Notch_inactivation_0: PROTEIN_M_Notch()@Compartment__cell -> PROTEIN_M_Notch2()@Compartment__cell r295_P_inactivation_k
	PROTEIN_M_Nrl_degradation_0: PROTEIN_M_Nrl()@Compartment__cell -> none()@Compartment__outside r296_P_protein_deg #Modifiers(none)
	PROTEIN_M_OrCt_degradation_0: PROTEIN_M_OrCt()@Compartment__cell -> none()@Compartment__outside r297_P_protein_deg #Modifiers(none)
	PROTEIN_M_Otx_degradation_0: PROTEIN_M_Otx()@Compartment__cell -> none()@Compartment__outside r298_P_protein_deg #Modifiers(none)
	PROTEIN_M_Pks_degradation_0: PROTEIN_M_Pks()@Compartment__cell -> none()@Compartment__outside r299_P_protein_deg #Modifiers(none)
	PROTEIN_M_Pmar1_degradation_0: PROTEIN_M_Pmar1()@Compartment__cell -> none()@Compartment__outside r300_P_protein_deg #Modifiers(none)
	PROTEIN_M_Sm27_degradation_0: PROTEIN_M_Sm27()@Compartment__cell -> none()@Compartment__outside r301_P_protein_deg #Modifiers(none)
	PROTEIN_M_Sm30_degradation_0: PROTEIN_M_Sm30()@Compartment__cell -> none()@Compartment__outside r302_P_protein_deg #Modifiers(none)
	PROTEIN_M_Sm50_degradation_0: PROTEIN_M_Sm50()@Compartment__cell -> none()@Compartment__outside r303_P_protein_deg #Modifiers(none)
	PROTEIN_M_Snail_degradation_0: PROTEIN_M_Snail()@Compartment__cell -> none()@Compartment__outside r304_P_protein_deg #Modifiers(none)
	PROTEIN_M_SoxB1_degradation_0: PROTEIN_M_SoxB1()@Compartment__cell -> none()@Compartment__outside r305_P_protein_deg #Modifiers(none)
	PROTEIN_M_SoxC_degradation_0: PROTEIN_M_SoxC()@Compartment__cell -> none()@Compartment__outside r306_P_protein_deg #Modifiers(none)
	PROTEIN_M_SuHN_accociation_0: PROTEIN_M_Notch2()@Compartment__cell + PROTEIN_M_SuH()@Compartment__cell -> PROTEIN_M_SuHN()@Compartment__cell r307_P_association_k
	PROTEIN_M_SuHN_dissociation_0: PROTEIN_M_SuHN()@Compartment__cell -> PROTEIN_M_Notch2()@Compartment__cell + PROTEIN_M_SuH()@Compartment__cell r308_P_dissociation_k
	PROTEIN_M_SuH_degradation_0: PROTEIN_M_SuH()@Compartment__cell -> none()@Compartment__outside r309_P_protein_deg #Modifiers(none)
	PROTEIN_M_SuTx_degradation_0: PROTEIN_M_SuTx()@Compartment__cell -> none()@Compartment__outside r310_P_protein_deg #Modifiers(none)
	PROTEIN_M_TBr_degradation_0: PROTEIN_M_TBr()@Compartment__cell -> none()@Compartment__outside r311_P_protein_deg #Modifiers(none)
	PROTEIN_M_Tel_degradation_0: PROTEIN_M_Tel()@Compartment__cell -> none()@Compartment__outside r312_P_protein_deg #Modifiers(none)
	PROTEIN_M_Tgif_degradation_0: PROTEIN_M_Tgif()@Compartment__cell -> none()@Compartment__outside r313_P_protein_deg #Modifiers(none)
	PROTEIN_M_UMADelta_degradation_0: PROTEIN_M_UMADelta()@Compartment__cell -> none()@Compartment__outside r314_P_protein_deg #Modifiers(none)
	PROTEIN_M_UMANrl_degradation_0: PROTEIN_M_UMANrl()@Compartment__cell -> none()@Compartment__outside r315_P_protein_deg #Modifiers(none)
	PROTEIN_M_UMR_degradation_0: PROTEIN_M_UMR()@Compartment__cell -> none()@Compartment__outside r316_P_protein_deg #Modifiers(none)
	PROTEIN_M_UbiqSoxB1_degradation_0: PROTEIN_M_UbiqSoxB1()@Compartment__cell -> none()@Compartment__outside r317_P_protein_deg #Modifiers(none)
	PROTEIN_M_VEGFR_degradation_0: PROTEIN_M_VEGFR()@Compartment__cell -> none()@Compartment__outside r318_P_protein_deg #Modifiers(none)
	PROTEIN_M_VEGFSignal_accociation_0: PROTEIN_M_L1()@Compartment__cell + PROTEIN_M_VEGFR()@Compartment__cell + PROTEIN_E_VEGF()@Compartment__cell -> PROTEIN_M_VEGFSignal()@Compartment__cell r319_P_association_k
	PROTEIN_M_VEGFSignal_dissociation_0: PROTEIN_M_VEGFSignal()@Compartment__cell -> PROTEIN_M_L1()@Compartment__cell + PROTEIN_M_VEGFR()@Compartment__cell + PROTEIN_E_VEGF()@Compartment__cell r320_P_dissociation_k
	PROTEIN_M_Wnt8_degradation_0: PROTEIN_M_Wnt8()@Compartment__cell -> none()@Compartment__outside r321_P_protein_deg #Modifiers(none)
	PROTEIN_M_cB_a_degradation_0: PROTEIN_M_cB()@Compartment__cell -> 0  fRate321() #Modifiers(PROTEIN_M_GSK3_a)
	PROTEIN_M_cB_degradation_0: PROTEIN_M_cB()@Compartment__cell -> none()@Compartment__outside r323_P_protein_deg #Modifiers(none)
	PROTEIN_M_frizzled_a_activation_0: PROTEIN_M_frizzled_i()@Compartment__cell -> PROTEIN_M_frizzled_a()@Compartment__cell fRate323() #Modifiers(PROTEIN_M_Wnt8)
	PROTEIN_M_frizzled_a_inactivation_0: PROTEIN_M_frizzled_a()@Compartment__cell -> PROTEIN_M_frizzled_i()@Compartment__cell r325_P_inactivation_k
	PROTEIN_M_nBTCF_accociation_0: PROTEIN_M_cB()@Compartment__cell + PROTEIN_M_TCF()@Compartment__cell -> PROTEIN_M_nBTCF()@Compartment__cell r326_P_association_k
	PROTEIN_M_nBTCF_dissociation_0: PROTEIN_M_nBTCF()@Compartment__cell -> PROTEIN_M_cB()@Compartment__cell + PROTEIN_M_TCF()@Compartment__cell r327_P_dissociation_k
	PROTEIN_M_z13_degradation_0: PROTEIN_M_z13()@Compartment__cell -> none()@Compartment__outside r328_P_protein_deg #Modifiers(none)
	PROTEIN_P_Alx1_degradation_0: PROTEIN_P_Alx1()@Compartment__cell -> none()@Compartment__outside r329_P_protein_deg #Modifiers(none)
	PROTEIN_P_Apobec_degradation_0: PROTEIN_P_Apobec()@Compartment__cell -> none()@Compartment__outside r330_P_protein_deg #Modifiers(none)
	PROTEIN_P_Blimp1_degradation_0: PROTEIN_P_Blimp1()@Compartment__cell -> none()@Compartment__outside r331_P_protein_deg #Modifiers(none)
	PROTEIN_P_Bra_degradation_0: PROTEIN_P_Bra()@Compartment__cell -> none()@Compartment__outside r332_P_protein_deg #Modifiers(none)
	PROTEIN_P_Brn_degradation_0: PROTEIN_P_Brn()@Compartment__cell -> none()@Compartment__outside r333_P_protein_deg #Modifiers(none)
	PROTEIN_P_CAPK_degradation_0: PROTEIN_P_CAPK()@Compartment__cell -> none()@Compartment__outside r334_P_protein_deg #Modifiers(none)
	PROTEIN_P_CyP_degradation_0: PROTEIN_P_CyP()@Compartment__cell -> none()@Compartment__outside r335_P_protein_deg #Modifiers(none)
	PROTEIN_P_Delta_activation_0: PROTEIN_P_Delta2()@Compartment__cell -> PROTEIN_P_Delta()@Compartment__cell fRate335() #Modifiers(PROTEIN_P_Nrl)
	PROTEIN_P_Delta_degradation_0: PROTEIN_P_Delta()@Compartment__cell -> none()@Compartment__outside r337_P_protein_deg #Modifiers(none)
	PROTEIN_P_Delta_inactivation_0: PROTEIN_P_Delta()@Compartment__cell -> PROTEIN_P_Delta2()@Compartment__cell r338_P_inactivation_k
	PROTEIN_P_Dpt_degradation_0: PROTEIN_P_Dpt()@Compartment__cell -> none()@Compartment__outside r339_P_protein_deg #Modifiers(none)
	PROTEIN_P_Dri_degradation_0: PROTEIN_P_Dri()@Compartment__cell -> none()@Compartment__outside r340_P_protein_deg #Modifiers(none)
	PROTEIN_P_Endo16_degradation_0: PROTEIN_P_Endo16()@Compartment__cell -> none()@Compartment__outside r341_P_protein_deg #Modifiers(none)
	PROTEIN_P_Erg_degradation_0: PROTEIN_P_Erg()@Compartment__cell -> none()@Compartment__outside r342_P_protein_deg #Modifiers(none)
	PROTEIN_P_Ets1_degradation_0: PROTEIN_P_Ets1()@Compartment__cell -> none()@Compartment__outside r343_P_protein_deg #Modifiers(none)
	PROTEIN_P_Eve_degradation_0: PROTEIN_P_Eve()@Compartment__cell -> none()@Compartment__outside r344_P_protein_deg #Modifiers(none)
	PROTEIN_P_Ficolin_degradation_0: PROTEIN_P_Ficolin()@Compartment__cell -> none()@Compartment__outside r345_P_protein_deg #Modifiers(none)
	PROTEIN_P_FoxA_degradation_0: PROTEIN_P_FoxA()@Compartment__cell -> none()@Compartment__outside r346_P_protein_deg #Modifiers(none)
	PROTEIN_P_FoxB_degradation_0: PROTEIN_P_FoxB()@Compartment__cell -> none()@Compartment__outside r347_P_protein_deg #Modifiers(none)
	PROTEIN_P_FoxN23_degradation_0: PROTEIN_P_FoxN23()@Compartment__cell -> none()@Compartment__outside r348_P_protein_deg #Modifiers(none)
	PROTEIN_P_FoxO_degradation_0: PROTEIN_P_FoxO()@Compartment__cell -> none()@Compartment__outside r349_P_protein_deg #Modifiers(none)
	PROTEIN_P_FvMo_degradation_0: PROTEIN_P_FvMo()@Compartment__cell -> none()@Compartment__outside r350_P_protein_deg #Modifiers(none)
	PROTEIN_P_GSK3_i_activation_0: PROTEIN_P_GSK3_a()@Compartment__cell -> PROTEIN_P_GSK3_i()@Compartment__cell fRate350() #Modifiers(PROTEIN_P_frizzled_a)
	PROTEIN_P_GSK3_i_inactivation_0: PROTEIN_P_GSK3_i()@Compartment__cell -> PROTEIN_P_GSK3_a()@Compartment__cell r352_P_inactivation_k
	PROTEIN_P_GataC_degradation_0: PROTEIN_P_GataC()@Compartment__cell -> none()@Compartment__outside r353_P_protein_deg #Modifiers(none)
	PROTEIN_P_GataE_degradation_0: PROTEIN_P_GataE()@Compartment__cell -> none()@Compartment__outside r354_P_protein_deg #Modifiers(none)
	PROTEIN_P_Gcad_degradation_0: PROTEIN_P_Gcad()@Compartment__cell -> none()@Compartment__outside r355_P_protein_deg #Modifiers(none)
	PROTEIN_P_Gcm_degradation_0: PROTEIN_P_Gcm()@Compartment__cell -> none()@Compartment__outside r356_P_protein_deg #Modifiers(none)
	PROTEIN_P_Gelsolin_degradation_0: PROTEIN_P_Gelsolin()@Compartment__cell -> none()@Compartment__outside r357_P_protein_deg #Modifiers(none)
	PROTEIN_P_GroTCF_accociation_0: PROTEIN_P_Gro()@Compartment__cell + PROTEIN_P_TCF()@Compartment__cell -> PROTEIN_P_GroTCF()@Compartment__cell r358_P_association_k
	PROTEIN_P_GroTCF_dissociation_0: PROTEIN_P_GroTCF()@Compartment__cell -> PROTEIN_P_Gro()@Compartment__cell + PROTEIN_P_TCF()@Compartment__cell r359_P_dissociation_k
	PROTEIN_P_HesC_degradation_0: PROTEIN_P_HesC()@Compartment__cell -> none()@Compartment__outside r360_P_protein_deg #Modifiers(none)
	PROTEIN_P_Hex_degradation_0: PROTEIN_P_Hex()@Compartment__cell -> none()@Compartment__outside r361_P_protein_deg #Modifiers(none)
	PROTEIN_P_Hnf6_degradation_0: PROTEIN_P_Hnf6()@Compartment__cell -> none()@Compartment__outside r362_P_protein_deg #Modifiers(none)
	PROTEIN_P_Hox_degradation_0: PROTEIN_P_Hox()@Compartment__cell -> none()@Compartment__outside r363_P_protein_deg #Modifiers(none)
	PROTEIN_P_Kakapo_degradation_0: PROTEIN_P_Kakapo()@Compartment__cell -> none()@Compartment__outside r364_P_protein_deg #Modifiers(none)
	PROTEIN_P_L1_degradation_0: PROTEIN_P_L1()@Compartment__cell -> none()@Compartment__outside r365_P_protein_deg #Modifiers(none)
	PROTEIN_P_Lim_degradation_0: PROTEIN_P_Lim()@Compartment__cell -> none()@Compartment__outside r366_P_protein_deg #Modifiers(none)
	PROTEIN_P_Msp130_degradation_0: PROTEIN_P_Msp130()@Compartment__cell -> none()@Compartment__outside r367_P_protein_deg #Modifiers(none)
	PROTEIN_P_MspL_degradation_0: PROTEIN_P_MspL()@Compartment__cell -> none()@Compartment__outside r368_P_protein_deg #Modifiers(none)
	PROTEIN_P_Not_degradation_0: PROTEIN_P_Not()@Compartment__cell -> none()@Compartment__outside r369_P_protein_deg #Modifiers(none)
	PROTEIN_P_Notch_activation_0: PROTEIN_P_Notch2()@Compartment__cell -> PROTEIN_P_Notch()@Compartment__cell fRate369() #Modifiers(PROTEIN_P_Delta2)
	PROTEIN_P_Notch_inactivation_0: PROTEIN_P_Notch()@Compartment__cell -> PROTEIN_P_Notch2()@Compartment__cell r371_P_inactivation_k
	PROTEIN_P_Nrl_degradation_0: PROTEIN_P_Nrl()@Compartment__cell -> none()@Compartment__outside r372_P_protein_deg #Modifiers(none)
	PROTEIN_P_OrCt_degradation_0: PROTEIN_P_OrCt()@Compartment__cell -> none()@Compartment__outside r373_P_protein_deg #Modifiers(none)
	PROTEIN_P_Otx_degradation_0: PROTEIN_P_Otx()@Compartment__cell -> none()@Compartment__outside r374_P_protein_deg #Modifiers(none)
	PROTEIN_P_Pks_degradation_0: PROTEIN_P_Pks()@Compartment__cell -> none()@Compartment__outside r375_P_protein_deg #Modifiers(none)
	PROTEIN_P_Pmar1_degradation_0: PROTEIN_P_Pmar1()@Compartment__cell -> none()@Compartment__outside r376_P_protein_deg #Modifiers(none)
	PROTEIN_P_Sm27_degradation_0: PROTEIN_P_Sm27()@Compartment__cell -> none()@Compartment__outside r377_P_protein_deg #Modifiers(none)
	PROTEIN_P_Sm30_degradation_0: PROTEIN_P_Sm30()@Compartment__cell -> none()@Compartment__outside r378_P_protein_deg #Modifiers(none)
	PROTEIN_P_Sm50_degradation_0: PROTEIN_P_Sm50()@Compartment__cell -> none()@Compartment__outside r379_P_protein_deg #Modifiers(none)
	PROTEIN_P_Snail_degradation_0: PROTEIN_P_Snail()@Compartment__cell -> none()@Compartment__outside r380_P_protein_deg #Modifiers(none)
	PROTEIN_P_SoxB1_degradation_0: PROTEIN_P_SoxB1()@Compartment__cell -> none()@Compartment__outside r381_P_protein_deg #Modifiers(none)
	PROTEIN_P_SoxC_degradation_0: PROTEIN_P_SoxC()@Compartment__cell -> none()@Compartment__outside r382_P_protein_deg #Modifiers(none)
	PROTEIN_P_SuHN_accociation_0: PROTEIN_P_Notch2()@Compartment__cell + PROTEIN_P_SuH()@Compartment__cell -> PROTEIN_P_SuHN()@Compartment__cell r383_P_association_k
	PROTEIN_P_SuHN_dissociation_0: PROTEIN_P_SuHN()@Compartment__cell -> PROTEIN_P_Notch2()@Compartment__cell + PROTEIN_P_SuH()@Compartment__cell r384_P_dissociation_k
	PROTEIN_P_SuTx_degradation_0: PROTEIN_P_SuTx()@Compartment__cell -> none()@Compartment__outside r385_P_protein_deg #Modifiers(none)
	PROTEIN_P_TBr_degradation_0: PROTEIN_P_TBr()@Compartment__cell -> none()@Compartment__outside r386_P_protein_deg #Modifiers(none)
	PROTEIN_P_Tel_degradation_0: PROTEIN_P_Tel()@Compartment__cell -> none()@Compartment__outside r387_P_protein_deg #Modifiers(none)
	PROTEIN_P_Tgif_degradation_0: PROTEIN_P_Tgif()@Compartment__cell -> none()@Compartment__outside r388_P_protein_deg #Modifiers(none)
	PROTEIN_P_UbiqAlx1_degradation_0: PROTEIN_P_UbiqAlx1()@Compartment__cell -> none()@Compartment__outside r389_P_protein_deg #Modifiers(none)
	PROTEIN_P_UbiqES_degradation_0: PROTEIN_P_UbiqES()@Compartment__cell -> none()@Compartment__outside r390_P_protein_deg #Modifiers(none)
	PROTEIN_P_UbiqEts1_degradation_0: PROTEIN_P_UbiqEts1()@Compartment__cell -> none()@Compartment__outside r391_P_protein_deg #Modifiers(none)
	PROTEIN_P_UbiqHesC_degradation_0: PROTEIN_P_UbiqHesC()@Compartment__cell -> none()@Compartment__outside r392_P_protein_deg #Modifiers(none)
	PROTEIN_P_UbiqHnf6_degradation_0: PROTEIN_P_UbiqHnf6()@Compartment__cell -> none()@Compartment__outside r393_P_protein_deg #Modifiers(none)
	PROTEIN_P_UbiqSoxC_degradation_0: PROTEIN_P_UbiqSoxC()@Compartment__cell -> none()@Compartment__outside r394_P_protein_deg #Modifiers(none)
	PROTEIN_P_UbiqTel_degradation_0: PROTEIN_P_UbiqTel()@Compartment__cell -> none()@Compartment__outside r395_P_protein_deg #Modifiers(none)
	PROTEIN_P_VEGFR_degradation_0: PROTEIN_P_VEGFR()@Compartment__cell -> none()@Compartment__outside r396_P_protein_deg #Modifiers(none)
	PROTEIN_P_VEGFSignal_accociation_0: PROTEIN_P_L1()@Compartment__cell + PROTEIN_P_VEGFR()@Compartment__cell + PROTEIN_E_VEGF()@Compartment__cell -> PROTEIN_P_VEGFSignal()@Compartment__cell r397_P_association_k
	PROTEIN_P_VEGFSignal_dissociation_0: PROTEIN_P_VEGFSignal()@Compartment__cell -> PROTEIN_P_L1()@Compartment__cell + PROTEIN_P_VEGFR()@Compartment__cell + PROTEIN_E_VEGF()@Compartment__cell r398_P_dissociation_k
	PROTEIN_P_Wnt8_degradation_0: PROTEIN_P_Wnt8()@Compartment__cell -> none()@Compartment__outside r399_P_protein_deg #Modifiers(none)
	PROTEIN_P_cB_a_degradation_0: PROTEIN_P_cB()@Compartment__cell -> 0  fRate399() #Modifiers(PROTEIN_P_GSK3_a)
	PROTEIN_P_cB_degradation_0: PROTEIN_P_cB()@Compartment__cell -> none()@Compartment__outside r401_P_protein_deg #Modifiers(none)
	PROTEIN_P_frizzled_a_activation_0: PROTEIN_P_frizzled_i()@Compartment__cell -> PROTEIN_P_frizzled_a()@Compartment__cell fRate401() #Modifiers(PROTEIN_P_Wnt8)
	PROTEIN_P_frizzled_a_inactivation_0: PROTEIN_P_frizzled_a()@Compartment__cell -> PROTEIN_P_frizzled_i()@Compartment__cell r403_P_inactivation_k
	PROTEIN_P_nBTCF_accociation_0: PROTEIN_P_cB()@Compartment__cell + PROTEIN_P_TCF()@Compartment__cell -> PROTEIN_P_nBTCF()@Compartment__cell r404_P_association_k
	PROTEIN_P_nBTCF_dissociation_0: PROTEIN_P_nBTCF()@Compartment__cell -> PROTEIN_P_cB()@Compartment__cell + PROTEIN_P_TCF()@Compartment__cell r405_P_dissociation_k
	PROTEIN_P_z13_degradation_0: PROTEIN_P_z13()@Compartment__cell -> none()@Compartment__outside r406_P_protein_deg #Modifiers(none)
	P_Ets1_Hill_Kinetic_0_reactants_0: 0  -> PRE_P_Ets1()@Compartment__cell -1*(fRate406())
	P_Ets1_Hill_Kinetic_0_products_0: 0  -> mRNA_P_Ets1()@Compartment__cell fRate406()
	P_Gcad_Hill_Kinetic_0_reactants_0: 0  -> PRE_P_Gcad()@Compartment__cell -1*(fRate407())
	P_Gcad_Hill_Kinetic_0_products_0: 0  -> mRNA_P_Gcad()@Compartment__cell fRate407()
	P_L1_Hill_Kinetic_0_reactants_0: 0  -> PRE_P_L1()@Compartment__cell -1*(fRate408())
	P_L1_Hill_Kinetic_0_products_0: 0  -> mRNA_P_L1()@Compartment__cell fRate408()
	P_Otx_Hill_Kinetic_0_reactants_0: 0  -> PRE_P_Otx()@Compartment__cell -1*(fRate409())
	P_Otx_Hill_Kinetic_0_products_0: 0  -> mRNA_P_Otx()@Compartment__cell fRate409()
	P_UbiqAlx1_Hill_Kinetic_0_reactants_0: 0  -> PRE_P_UbiqAlx1()@Compartment__cell -1*(fRate410())
	P_UbiqAlx1_Hill_Kinetic_0_products_0: 0  -> mRNA_P_UbiqAlx1()@Compartment__cell fRate410()
	P_UbiqES_Hill_Kinetic_0_reactants_0: 0  -> PRE_P_UbiqES()@Compartment__cell -1*(fRate411())
	P_UbiqES_Hill_Kinetic_0_products_0: 0  -> mRNA_P_UbiqES()@Compartment__cell fRate411()
	P_UbiqEts1_Hill_Kinetic_0_reactants_0: 0  -> PRE_P_UbiqEts1()@Compartment__cell -1*(fRate412())
	P_UbiqEts1_Hill_Kinetic_0_products_0: 0  -> mRNA_P_UbiqEts1()@Compartment__cell fRate412()
	P_UbiqHesC_Hill_Kinetic_0_reactants_0: 0  -> PRE_P_UbiqHesC()@Compartment__cell -1*(fRate413())
	P_UbiqHesC_Hill_Kinetic_0_products_0: 0  -> mRNA_P_UbiqHesC()@Compartment__cell fRate413()
	P_UbiqHnf6_Hill_Kinetic_0_reactants_0: 0  -> PRE_P_UbiqHnf6()@Compartment__cell -1*(fRate414())
	P_UbiqHnf6_Hill_Kinetic_0_products_0: 0  -> mRNA_P_UbiqHnf6()@Compartment__cell fRate414()
	P_UbiqSoxC_Hill_Kinetic_0_reactants_0: 0  -> PRE_P_UbiqSoxC()@Compartment__cell -1*(fRate415())
	P_UbiqSoxC_Hill_Kinetic_0_products_0: 0  -> mRNA_P_UbiqSoxC()@Compartment__cell fRate415()
	P_UbiqTel_Hill_Kinetic_0_reactants_0: 0  -> PRE_P_UbiqTel()@Compartment__cell -1*(fRate416())
	P_UbiqTel_Hill_Kinetic_0_products_0: 0  -> mRNA_P_UbiqTel()@Compartment__cell fRate416()
	P_cB_Hill_Kinetic_0_reactants_0: 0  -> PRE_P_cB()@Compartment__cell -1*(fRate417())
	P_cB_Hill_Kinetic_0_products_0: 0  -> mRNA_P_cB()@Compartment__cell fRate417()
	mRNA_E_Alx1_degradation_0: mRNA_E_Alx1()@Compartment__cell -> none()@Compartment__outside r419_P_mRNA_deg #Modifiers(none)
	mRNA_E_Alx1_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate419()) #Modifiers(mRNA_E_Alx1)
	mRNA_E_Alx1_translation_0_products_0: 0  -> PROTEIN_E_Alx1()@Compartment__cell fRate419() #Modifiers(mRNA_E_Alx1)
	mRNA_E_Apobec_degradation_0: mRNA_E_Apobec()@Compartment__cell -> none()@Compartment__outside r421_P_mRNA_deg #Modifiers(none)
	mRNA_E_Apobec_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate421()) #Modifiers(mRNA_E_Apobec)
	mRNA_E_Apobec_translation_0_products_0: 0  -> PROTEIN_E_Apobec()@Compartment__cell fRate421() #Modifiers(mRNA_E_Apobec)
	mRNA_E_Blimp1_degradation_0: mRNA_E_Blimp1()@Compartment__cell -> none()@Compartment__outside r423_P_mRNA_deg #Modifiers(none)
	mRNA_E_Blimp1_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate423()) #Modifiers(mRNA_E_Blimp1)
	mRNA_E_Blimp1_translation_0_products_0: 0  -> PROTEIN_E_Blimp1()@Compartment__cell fRate423() #Modifiers(mRNA_E_Blimp1)
	mRNA_E_Bra_degradation_0: mRNA_E_Bra()@Compartment__cell -> none()@Compartment__outside r425_P_mRNA_deg #Modifiers(none)
	mRNA_E_Bra_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate425()) #Modifiers(mRNA_E_Bra)
	mRNA_E_Bra_translation_0_products_0: 0  -> PROTEIN_E_Bra()@Compartment__cell fRate425() #Modifiers(mRNA_E_Bra)
	mRNA_E_Brn_degradation_0: mRNA_E_Brn()@Compartment__cell -> none()@Compartment__outside r427_P_mRNA_deg #Modifiers(none)
	mRNA_E_Brn_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate427()) #Modifiers(mRNA_E_Brn)
	mRNA_E_Brn_translation_0_products_0: 0  -> PROTEIN_E_Brn()@Compartment__cell fRate427() #Modifiers(mRNA_E_Brn)
	mRNA_E_CAPK_degradation_0: mRNA_E_CAPK()@Compartment__cell -> none()@Compartment__outside r429_P_mRNA_deg #Modifiers(none)
	mRNA_E_CAPK_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate429()) #Modifiers(mRNA_E_CAPK)
	mRNA_E_CAPK_translation_0_products_0: 0  -> PROTEIN_E_CAPK()@Compartment__cell fRate429() #Modifiers(mRNA_E_CAPK)
	mRNA_E_CyP_degradation_0: mRNA_E_CyP()@Compartment__cell -> none()@Compartment__outside r431_P_mRNA_deg #Modifiers(none)
	mRNA_E_CyP_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate431()) #Modifiers(mRNA_E_CyP)
	mRNA_E_CyP_translation_0_products_0: 0  -> PROTEIN_E_CyP()@Compartment__cell fRate431() #Modifiers(mRNA_E_CyP)
	mRNA_E_Delta_degradation_0: mRNA_E_Delta()@Compartment__cell -> none()@Compartment__outside r433_P_mRNA_deg #Modifiers(none)
	mRNA_E_Delta_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate433()) #Modifiers(mRNA_E_Delta)
	mRNA_E_Delta_translation_0_products_0: 0  -> PROTEIN_E_Delta()@Compartment__cell fRate433() #Modifiers(mRNA_E_Delta)
	mRNA_E_Dpt_degradation_0: mRNA_E_Dpt()@Compartment__cell -> none()@Compartment__outside r435_P_mRNA_deg #Modifiers(none)
	mRNA_E_Dpt_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate435()) #Modifiers(mRNA_E_Dpt)
	mRNA_E_Dpt_translation_0_products_0: 0  -> PROTEIN_E_Dpt()@Compartment__cell fRate435() #Modifiers(mRNA_E_Dpt)
	mRNA_E_Dri_degradation_0: mRNA_E_Dri()@Compartment__cell -> none()@Compartment__outside r437_P_mRNA_deg #Modifiers(none)
	mRNA_E_Dri_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate437()) #Modifiers(mRNA_E_Dri)
	mRNA_E_Dri_translation_0_products_0: 0  -> PROTEIN_E_Dri()@Compartment__cell fRate437() #Modifiers(mRNA_E_Dri)
	mRNA_E_ES_degradation_0: mRNA_E_ES()@Compartment__cell -> none()@Compartment__outside r439_P_mRNA_deg #Modifiers(none)
	mRNA_E_ES_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate439()) #Modifiers(mRNA_E_ES)
	mRNA_E_ES_translation_0_products_0: 0  -> PROTEIN_E_ES()@Compartment__cell fRate439() #Modifiers(mRNA_E_ES)
	mRNA_E_Endo16_degradation_0: mRNA_E_Endo16()@Compartment__cell -> none()@Compartment__outside r441_P_mRNA_deg #Modifiers(none)
	mRNA_E_Endo16_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate441()) #Modifiers(mRNA_E_Endo16)
	mRNA_E_Endo16_translation_0_products_0: 0  -> PROTEIN_E_Endo16()@Compartment__cell fRate441() #Modifiers(mRNA_E_Endo16)
	mRNA_E_Erg_degradation_0: mRNA_E_Erg()@Compartment__cell -> none()@Compartment__outside r443_P_mRNA_deg #Modifiers(none)
	mRNA_E_Erg_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate443()) #Modifiers(mRNA_E_Erg)
	mRNA_E_Erg_translation_0_products_0: 0  -> PROTEIN_E_Erg()@Compartment__cell fRate443() #Modifiers(mRNA_E_Erg)
	mRNA_E_Ets1_degradation_0: mRNA_E_Ets1()@Compartment__cell -> none()@Compartment__outside r445_P_mRNA_deg #Modifiers(none)
	mRNA_E_Ets1_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate445()) #Modifiers(mRNA_E_Ets1)
	mRNA_E_Ets1_translation_0_products_0: 0  -> PROTEIN_E_Ets1()@Compartment__cell fRate445() #Modifiers(mRNA_E_Ets1)
	mRNA_E_Eve_degradation_0: mRNA_E_Eve()@Compartment__cell -> none()@Compartment__outside r447_P_mRNA_deg #Modifiers(none)
	mRNA_E_Eve_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate447()) #Modifiers(mRNA_E_Eve)
	mRNA_E_Eve_translation_0_products_0: 0  -> PROTEIN_E_Eve()@Compartment__cell fRate447() #Modifiers(mRNA_E_Eve)
	mRNA_E_Ficolin_degradation_0: mRNA_E_Ficolin()@Compartment__cell -> none()@Compartment__outside r449_P_mRNA_deg #Modifiers(none)
	mRNA_E_Ficolin_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate449()) #Modifiers(mRNA_E_Ficolin)
	mRNA_E_Ficolin_translation_0_products_0: 0  -> PROTEIN_E_Ficolin()@Compartment__cell fRate449() #Modifiers(mRNA_E_Ficolin)
	mRNA_E_FoxA_degradation_0: mRNA_E_FoxA()@Compartment__cell -> none()@Compartment__outside r451_P_mRNA_deg #Modifiers(none)
	mRNA_E_FoxA_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate451()) #Modifiers(mRNA_E_FoxA)
	mRNA_E_FoxA_translation_0_products_0: 0  -> PROTEIN_E_FoxA()@Compartment__cell fRate451() #Modifiers(mRNA_E_FoxA)
	mRNA_E_FoxB_degradation_0: mRNA_E_FoxB()@Compartment__cell -> none()@Compartment__outside r453_P_mRNA_deg #Modifiers(none)
	mRNA_E_FoxB_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate453()) #Modifiers(mRNA_E_FoxB)
	mRNA_E_FoxB_translation_0_products_0: 0  -> PROTEIN_E_FoxB()@Compartment__cell fRate453() #Modifiers(mRNA_E_FoxB)
	mRNA_E_FoxN23_degradation_0: mRNA_E_FoxN23()@Compartment__cell -> none()@Compartment__outside r455_P_mRNA_deg #Modifiers(none)
	mRNA_E_FoxN23_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate455()) #Modifiers(mRNA_E_FoxN23)
	mRNA_E_FoxN23_translation_0_products_0: 0  -> PROTEIN_E_FoxN23()@Compartment__cell fRate455() #Modifiers(mRNA_E_FoxN23)
	mRNA_E_FoxO_degradation_0: mRNA_E_FoxO()@Compartment__cell -> none()@Compartment__outside r457_P_mRNA_deg #Modifiers(none)
	mRNA_E_FoxO_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate457()) #Modifiers(mRNA_E_FoxO)
	mRNA_E_FoxO_translation_0_products_0: 0  -> PROTEIN_E_FoxO()@Compartment__cell fRate457() #Modifiers(mRNA_E_FoxO)
	mRNA_E_FvMo_degradation_0: mRNA_E_FvMo()@Compartment__cell -> none()@Compartment__outside r459_P_mRNA_deg #Modifiers(none)
	mRNA_E_FvMo_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate459()) #Modifiers(mRNA_E_FvMo)
	mRNA_E_FvMo_translation_0_products_0: 0  -> PROTEIN_E_FvMo()@Compartment__cell fRate459() #Modifiers(mRNA_E_FvMo)
	mRNA_E_GataC_degradation_0: mRNA_E_GataC()@Compartment__cell -> none()@Compartment__outside r461_P_mRNA_deg #Modifiers(none)
	mRNA_E_GataC_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate461()) #Modifiers(mRNA_E_GataC)
	mRNA_E_GataC_translation_0_products_0: 0  -> PROTEIN_E_GataC()@Compartment__cell fRate461() #Modifiers(mRNA_E_GataC)
	mRNA_E_GataE_degradation_0: mRNA_E_GataE()@Compartment__cell -> none()@Compartment__outside r463_P_mRNA_deg #Modifiers(none)
	mRNA_E_GataE_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate463()) #Modifiers(mRNA_E_GataE)
	mRNA_E_GataE_translation_0_products_0: 0  -> PROTEIN_E_GataE()@Compartment__cell fRate463() #Modifiers(mRNA_E_GataE)
	mRNA_E_Gcad_degradation_0: mRNA_E_Gcad()@Compartment__cell -> none()@Compartment__outside r465_P_mRNA_deg #Modifiers(none)
	mRNA_E_Gcad_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate465()) #Modifiers(mRNA_E_Gcad)
	mRNA_E_Gcad_translation_0_products_0: 0  -> PROTEIN_E_Gcad()@Compartment__cell fRate465() #Modifiers(mRNA_E_Gcad)
	mRNA_E_Gcm_degradation_0: mRNA_E_Gcm()@Compartment__cell -> none()@Compartment__outside r467_P_mRNA_deg #Modifiers(none)
	mRNA_E_Gcm_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate467()) #Modifiers(mRNA_E_Gcm)
	mRNA_E_Gcm_translation_0_products_0: 0  -> PROTEIN_E_Gcm()@Compartment__cell fRate467() #Modifiers(mRNA_E_Gcm)
	mRNA_E_Gelsolin_degradation_0: mRNA_E_Gelsolin()@Compartment__cell -> none()@Compartment__outside r469_P_mRNA_deg #Modifiers(none)
	mRNA_E_Gelsolin_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate469()) #Modifiers(mRNA_E_Gelsolin)
	mRNA_E_Gelsolin_translation_0_products_0: 0  -> PROTEIN_E_Gelsolin()@Compartment__cell fRate469() #Modifiers(mRNA_E_Gelsolin)
	mRNA_E_HesC_degradation_0: mRNA_E_HesC()@Compartment__cell -> none()@Compartment__outside r471_P_mRNA_deg #Modifiers(none)
	mRNA_E_HesC_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate471()) #Modifiers(mRNA_E_HesC)
	mRNA_E_HesC_translation_0_products_0: 0  -> PROTEIN_E_HesC()@Compartment__cell fRate471() #Modifiers(mRNA_E_HesC)
	mRNA_E_Hex_degradation_0: mRNA_E_Hex()@Compartment__cell -> none()@Compartment__outside r473_P_mRNA_deg #Modifiers(none)
	mRNA_E_Hex_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate473()) #Modifiers(mRNA_E_Hex)
	mRNA_E_Hex_translation_0_products_0: 0  -> PROTEIN_E_Hex()@Compartment__cell fRate473() #Modifiers(mRNA_E_Hex)
	mRNA_E_Hnf6_degradation_0: mRNA_E_Hnf6()@Compartment__cell -> none()@Compartment__outside r475_P_mRNA_deg #Modifiers(none)
	mRNA_E_Hnf6_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate475()) #Modifiers(mRNA_E_Hnf6)
	mRNA_E_Hnf6_translation_0_products_0: 0  -> PROTEIN_E_Hnf6()@Compartment__cell fRate475() #Modifiers(mRNA_E_Hnf6)
	mRNA_E_Hox_degradation_0: mRNA_E_Hox()@Compartment__cell -> none()@Compartment__outside r477_P_mRNA_deg #Modifiers(none)
	mRNA_E_Hox_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate477()) #Modifiers(mRNA_E_Hox)
	mRNA_E_Hox_translation_0_products_0: 0  -> PROTEIN_E_Hox()@Compartment__cell fRate477() #Modifiers(mRNA_E_Hox)
	mRNA_E_Kakapo_degradation_0: mRNA_E_Kakapo()@Compartment__cell -> none()@Compartment__outside r479_P_mRNA_deg #Modifiers(none)
	mRNA_E_Kakapo_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate479()) #Modifiers(mRNA_E_Kakapo)
	mRNA_E_Kakapo_translation_0_products_0: 0  -> PROTEIN_E_Kakapo()@Compartment__cell fRate479() #Modifiers(mRNA_E_Kakapo)
	mRNA_E_Lim_degradation_0: mRNA_E_Lim()@Compartment__cell -> none()@Compartment__outside r481_P_mRNA_deg #Modifiers(none)
	mRNA_E_Lim_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate481()) #Modifiers(mRNA_E_Lim)
	mRNA_E_Lim_translation_0_products_0: 0  -> PROTEIN_E_Lim()@Compartment__cell fRate481() #Modifiers(mRNA_E_Lim)
	mRNA_E_Msp130_degradation_0: mRNA_E_Msp130()@Compartment__cell -> none()@Compartment__outside r483_P_mRNA_deg #Modifiers(none)
	mRNA_E_Msp130_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate483()) #Modifiers(mRNA_E_Msp130)
	mRNA_E_Msp130_translation_0_products_0: 0  -> PROTEIN_E_Msp130()@Compartment__cell fRate483() #Modifiers(mRNA_E_Msp130)
	mRNA_E_MspL_degradation_0: mRNA_E_MspL()@Compartment__cell -> none()@Compartment__outside r485_P_mRNA_deg #Modifiers(none)
	mRNA_E_MspL_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate485()) #Modifiers(mRNA_E_MspL)
	mRNA_E_MspL_translation_0_products_0: 0  -> PROTEIN_E_MspL()@Compartment__cell fRate485() #Modifiers(mRNA_E_MspL)
	mRNA_E_Not_degradation_0: mRNA_E_Not()@Compartment__cell -> none()@Compartment__outside r487_P_mRNA_deg #Modifiers(none)
	mRNA_E_Not_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate487()) #Modifiers(mRNA_E_Not)
	mRNA_E_Not_translation_0_products_0: 0  -> PROTEIN_E_Not()@Compartment__cell fRate487() #Modifiers(mRNA_E_Not)
	mRNA_E_Notch_degradation_0: mRNA_E_Notch()@Compartment__cell -> none()@Compartment__outside r489_P_mRNA_deg #Modifiers(none)
	mRNA_E_Notch_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate489()) #Modifiers(mRNA_E_Notch)
	mRNA_E_Notch_translation_0_products_0: 0  -> PROTEIN_E_Notch()@Compartment__cell fRate489() #Modifiers(mRNA_E_Notch)
	mRNA_E_Nrl_degradation_0: mRNA_E_Nrl()@Compartment__cell -> none()@Compartment__outside r491_P_mRNA_deg #Modifiers(none)
	mRNA_E_Nrl_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate491()) #Modifiers(mRNA_E_Nrl)
	mRNA_E_Nrl_translation_0_products_0: 0  -> PROTEIN_E_Nrl()@Compartment__cell fRate491() #Modifiers(mRNA_E_Nrl)
	mRNA_E_OrCt_degradation_0: mRNA_E_OrCt()@Compartment__cell -> none()@Compartment__outside r493_P_mRNA_deg #Modifiers(none)
	mRNA_E_OrCt_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate493()) #Modifiers(mRNA_E_OrCt)
	mRNA_E_OrCt_translation_0_products_0: 0  -> PROTEIN_E_OrCt()@Compartment__cell fRate493() #Modifiers(mRNA_E_OrCt)
	mRNA_E_Otx_degradation_0: mRNA_E_Otx()@Compartment__cell -> none()@Compartment__outside r495_P_mRNA_deg #Modifiers(none)
	mRNA_E_Otx_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate495()) #Modifiers(mRNA_E_Otx)
	mRNA_E_Otx_translation_0_products_0: 0  -> PROTEIN_E_Otx()@Compartment__cell fRate495() #Modifiers(mRNA_E_Otx)
	mRNA_E_Pks_degradation_0: mRNA_E_Pks()@Compartment__cell -> none()@Compartment__outside r497_P_mRNA_deg #Modifiers(none)
	mRNA_E_Pks_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate497()) #Modifiers(mRNA_E_Pks)
	mRNA_E_Pks_translation_0_products_0: 0  -> PROTEIN_E_Pks()@Compartment__cell fRate497() #Modifiers(mRNA_E_Pks)
	mRNA_E_Pmar1_degradation_0: mRNA_E_Pmar1()@Compartment__cell -> none()@Compartment__outside r499_P_mRNA_deg #Modifiers(none)
	mRNA_E_Pmar1_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate499()) #Modifiers(mRNA_E_Pmar1)
	mRNA_E_Pmar1_translation_0_products_0: 0  -> PROTEIN_E_Pmar1()@Compartment__cell fRate499() #Modifiers(mRNA_E_Pmar1)
	mRNA_E_Sm27_degradation_0: mRNA_E_Sm27()@Compartment__cell -> none()@Compartment__outside r501_P_mRNA_deg #Modifiers(none)
	mRNA_E_Sm27_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate501()) #Modifiers(mRNA_E_Sm27)
	mRNA_E_Sm27_translation_0_products_0: 0  -> PROTEIN_E_Sm27()@Compartment__cell fRate501() #Modifiers(mRNA_E_Sm27)
	mRNA_E_Sm30_degradation_0: mRNA_E_Sm30()@Compartment__cell -> none()@Compartment__outside r503_P_mRNA_deg #Modifiers(none)
	mRNA_E_Sm30_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate503()) #Modifiers(mRNA_E_Sm30)
	mRNA_E_Sm30_translation_0_products_0: 0  -> PROTEIN_E_Sm30()@Compartment__cell fRate503() #Modifiers(mRNA_E_Sm30)
	mRNA_E_Sm50_degradation_0: mRNA_E_Sm50()@Compartment__cell -> none()@Compartment__outside r505_P_mRNA_deg #Modifiers(none)
	mRNA_E_Sm50_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate505()) #Modifiers(mRNA_E_Sm50)
	mRNA_E_Sm50_translation_0_products_0: 0  -> PROTEIN_E_Sm50()@Compartment__cell fRate505() #Modifiers(mRNA_E_Sm50)
	mRNA_E_Snail_degradation_0: mRNA_E_Snail()@Compartment__cell -> none()@Compartment__outside r507_P_mRNA_deg #Modifiers(none)
	mRNA_E_Snail_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate507()) #Modifiers(mRNA_E_Snail)
	mRNA_E_Snail_translation_0_products_0: 0  -> PROTEIN_E_Snail()@Compartment__cell fRate507() #Modifiers(mRNA_E_Snail)
	mRNA_E_SoxB1_degradation_0: mRNA_E_SoxB1()@Compartment__cell -> none()@Compartment__outside r509_P_mRNA_deg #Modifiers(none)
	mRNA_E_SoxB1_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate509()) #Modifiers(mRNA_E_SoxB1)
	mRNA_E_SoxB1_translation_0_products_0: 0  -> PROTEIN_E_SoxB1()@Compartment__cell fRate509() #Modifiers(mRNA_E_SoxB1)
	mRNA_E_SoxC_degradation_0: mRNA_E_SoxC()@Compartment__cell -> none()@Compartment__outside r511_P_mRNA_deg #Modifiers(none)
	mRNA_E_SoxC_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate511()) #Modifiers(mRNA_E_SoxC)
	mRNA_E_SoxC_translation_0_products_0: 0  -> PROTEIN_E_SoxC()@Compartment__cell fRate511() #Modifiers(mRNA_E_SoxC)
	mRNA_E_SuH_degradation_0: mRNA_E_SuH()@Compartment__cell -> none()@Compartment__outside r513_P_mRNA_deg #Modifiers(none)
	mRNA_E_SuH_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate513()) #Modifiers(mRNA_E_SuH)
	mRNA_E_SuH_translation_0_products_0: 0  -> PROTEIN_E_SuH()@Compartment__cell fRate513() #Modifiers(mRNA_E_SuH)
	mRNA_E_SuTx_degradation_0: mRNA_E_SuTx()@Compartment__cell -> none()@Compartment__outside r515_P_mRNA_deg #Modifiers(none)
	mRNA_E_SuTx_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate515()) #Modifiers(mRNA_E_SuTx)
	mRNA_E_SuTx_translation_0_products_0: 0  -> PROTEIN_E_SuTx()@Compartment__cell fRate515() #Modifiers(mRNA_E_SuTx)
	mRNA_E_TBr_degradation_0: mRNA_E_TBr()@Compartment__cell -> none()@Compartment__outside r517_P_mRNA_deg #Modifiers(none)
	mRNA_E_TBr_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate517()) #Modifiers(mRNA_E_TBr)
	mRNA_E_TBr_translation_0_products_0: 0  -> PROTEIN_E_TBr()@Compartment__cell fRate517() #Modifiers(mRNA_E_TBr)
	mRNA_E_Tel_degradation_0: mRNA_E_Tel()@Compartment__cell -> none()@Compartment__outside r519_P_mRNA_deg #Modifiers(none)
	mRNA_E_Tel_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate519()) #Modifiers(mRNA_E_Tel)
	mRNA_E_Tel_translation_0_products_0: 0  -> PROTEIN_E_Tel()@Compartment__cell fRate519() #Modifiers(mRNA_E_Tel)
	mRNA_E_Tgif_degradation_0: mRNA_E_Tgif()@Compartment__cell -> none()@Compartment__outside r521_P_mRNA_deg #Modifiers(none)
	mRNA_E_Tgif_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate521()) #Modifiers(mRNA_E_Tgif)
	mRNA_E_Tgif_translation_0_products_0: 0  -> PROTEIN_E_Tgif()@Compartment__cell fRate521() #Modifiers(mRNA_E_Tgif)
	mRNA_E_UMR_degradation_0: mRNA_E_UMR()@Compartment__cell -> none()@Compartment__outside r523_P_mRNA_deg #Modifiers(none)
	mRNA_E_UMR_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate523()) #Modifiers(mRNA_E_UMR)
	mRNA_E_UMR_translation_0_products_0: 0  -> PROTEIN_E_UMR()@Compartment__cell fRate523() #Modifiers(mRNA_E_UMR)
	mRNA_E_UVAOtx_degradation_0: mRNA_E_UVAOtx()@Compartment__cell -> none()@Compartment__outside r525_P_mRNA_deg #Modifiers(none)
	mRNA_E_UVAOtx_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate525()) #Modifiers(mRNA_E_UVAOtx)
	mRNA_E_UVAOtx_translation_0_products_0: 0  -> PROTEIN_E_UVAOtx()@Compartment__cell fRate525() #Modifiers(mRNA_E_UVAOtx)
	mRNA_E_UbiqSoxB1_degradation_0: mRNA_E_UbiqSoxB1()@Compartment__cell -> none()@Compartment__outside r527_P_mRNA_deg #Modifiers(none)
	mRNA_E_UbiqSoxB1_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate527()) #Modifiers(mRNA_E_UbiqSoxB1)
	mRNA_E_UbiqSoxB1_translation_0_products_0: 0  -> PROTEIN_E_UbiqSoxB1()@Compartment__cell fRate527() #Modifiers(mRNA_E_UbiqSoxB1)
	mRNA_E_VEGFR_degradation_0: mRNA_E_VEGFR()@Compartment__cell -> none()@Compartment__outside r529_P_mRNA_deg #Modifiers(none)
	mRNA_E_VEGFR_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate529()) #Modifiers(mRNA_E_VEGFR)
	mRNA_E_VEGFR_translation_0_products_0: 0  -> PROTEIN_E_VEGFR()@Compartment__cell fRate529() #Modifiers(mRNA_E_VEGFR)
	mRNA_E_VEGF_degradation_0: mRNA_E_VEGF()@Compartment__cell -> none()@Compartment__outside r531_P_mRNA_deg #Modifiers(none)
	mRNA_E_VEGF_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate531()) #Modifiers(mRNA_E_VEGF)
	mRNA_E_VEGF_translation_0_products_0: 0  -> PROTEIN_E_VEGF()@Compartment__cell fRate531() #Modifiers(mRNA_E_VEGF)
	mRNA_E_Wnt8_degradation_0: mRNA_E_Wnt8()@Compartment__cell -> none()@Compartment__outside r533_P_mRNA_deg #Modifiers(none)
	mRNA_E_Wnt8_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate533()) #Modifiers(mRNA_E_Wnt8)
	mRNA_E_Wnt8_translation_0_products_0: 0  -> PROTEIN_E_Wnt8()@Compartment__cell fRate533() #Modifiers(mRNA_E_Wnt8)
	mRNA_E_cB_degradation_0: mRNA_E_cB()@Compartment__cell -> none()@Compartment__outside r535_P_mRNA_deg #Modifiers(none)
	mRNA_E_cB_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate535()) #Modifiers(mRNA_E_cB)
	mRNA_E_cB_translation_0_products_0: 0  -> PROTEIN_E_cB()@Compartment__cell fRate535() #Modifiers(mRNA_E_cB)
	mRNA_E_z13_degradation_0: mRNA_E_z13()@Compartment__cell -> none()@Compartment__outside r537_P_mRNA_deg #Modifiers(none)
	mRNA_E_z13_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate537()) #Modifiers(mRNA_E_z13)
	mRNA_E_z13_translation_0_products_0: 0  -> PROTEIN_E_z13()@Compartment__cell fRate537() #Modifiers(mRNA_E_z13)
	mRNA_M_Alx1_degradation_0: mRNA_M_Alx1()@Compartment__cell -> none()@Compartment__outside r539_P_mRNA_deg #Modifiers(none)
	mRNA_M_Alx1_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate539()) #Modifiers(mRNA_M_Alx1)
	mRNA_M_Alx1_translation_0_products_0: 0  -> PROTEIN_M_Alx1()@Compartment__cell fRate539() #Modifiers(mRNA_M_Alx1)
	mRNA_M_Apobec_degradation_0: mRNA_M_Apobec()@Compartment__cell -> none()@Compartment__outside r541_P_mRNA_deg #Modifiers(none)
	mRNA_M_Apobec_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate541()) #Modifiers(mRNA_M_Apobec)
	mRNA_M_Apobec_translation_0_products_0: 0  -> PROTEIN_M_Apobec()@Compartment__cell fRate541() #Modifiers(mRNA_M_Apobec)
	mRNA_M_Blimp1_degradation_0: mRNA_M_Blimp1()@Compartment__cell -> none()@Compartment__outside r543_P_mRNA_deg #Modifiers(none)
	mRNA_M_Blimp1_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate543()) #Modifiers(mRNA_M_Blimp1)
	mRNA_M_Blimp1_translation_0_products_0: 0  -> PROTEIN_M_Blimp1()@Compartment__cell fRate543() #Modifiers(mRNA_M_Blimp1)
	mRNA_M_Bra_degradation_0: mRNA_M_Bra()@Compartment__cell -> none()@Compartment__outside r545_P_mRNA_deg #Modifiers(none)
	mRNA_M_Bra_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate545()) #Modifiers(mRNA_M_Bra)
	mRNA_M_Bra_translation_0_products_0: 0  -> PROTEIN_M_Bra()@Compartment__cell fRate545() #Modifiers(mRNA_M_Bra)
	mRNA_M_Brn_degradation_0: mRNA_M_Brn()@Compartment__cell -> none()@Compartment__outside r547_P_mRNA_deg #Modifiers(none)
	mRNA_M_Brn_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate547()) #Modifiers(mRNA_M_Brn)
	mRNA_M_Brn_translation_0_products_0: 0  -> PROTEIN_M_Brn()@Compartment__cell fRate547() #Modifiers(mRNA_M_Brn)
	mRNA_M_CAPK_degradation_0: mRNA_M_CAPK()@Compartment__cell -> none()@Compartment__outside r549_P_mRNA_deg #Modifiers(none)
	mRNA_M_CAPK_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate549()) #Modifiers(mRNA_M_CAPK)
	mRNA_M_CAPK_translation_0_products_0: 0  -> PROTEIN_M_CAPK()@Compartment__cell fRate549() #Modifiers(mRNA_M_CAPK)
	mRNA_M_CyP_degradation_0: mRNA_M_CyP()@Compartment__cell -> none()@Compartment__outside r551_P_mRNA_deg #Modifiers(none)
	mRNA_M_CyP_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate551()) #Modifiers(mRNA_M_CyP)
	mRNA_M_CyP_translation_0_products_0: 0  -> PROTEIN_M_CyP()@Compartment__cell fRate551() #Modifiers(mRNA_M_CyP)
	mRNA_M_Delta_degradation_0: mRNA_M_Delta()@Compartment__cell -> none()@Compartment__outside r553_P_mRNA_deg #Modifiers(none)
	mRNA_M_Delta_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate553()) #Modifiers(mRNA_M_Delta)
	mRNA_M_Delta_translation_0_products_0: 0  -> PROTEIN_M_Delta()@Compartment__cell fRate553() #Modifiers(mRNA_M_Delta)
	mRNA_M_Dpt_degradation_0: mRNA_M_Dpt()@Compartment__cell -> none()@Compartment__outside r555_P_mRNA_deg #Modifiers(none)
	mRNA_M_Dpt_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate555()) #Modifiers(mRNA_M_Dpt)
	mRNA_M_Dpt_translation_0_products_0: 0  -> PROTEIN_M_Dpt()@Compartment__cell fRate555() #Modifiers(mRNA_M_Dpt)
	mRNA_M_Dri_degradation_0: mRNA_M_Dri()@Compartment__cell -> none()@Compartment__outside r557_P_mRNA_deg #Modifiers(none)
	mRNA_M_Dri_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate557()) #Modifiers(mRNA_M_Dri)
	mRNA_M_Dri_translation_0_products_0: 0  -> PROTEIN_M_Dri()@Compartment__cell fRate557() #Modifiers(mRNA_M_Dri)
	mRNA_M_Endo16_degradation_0: mRNA_M_Endo16()@Compartment__cell -> none()@Compartment__outside r559_P_mRNA_deg #Modifiers(none)
	mRNA_M_Endo16_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate559()) #Modifiers(mRNA_M_Endo16)
	mRNA_M_Endo16_translation_0_products_0: 0  -> PROTEIN_M_Endo16()@Compartment__cell fRate559() #Modifiers(mRNA_M_Endo16)
	mRNA_M_Erg_degradation_0: mRNA_M_Erg()@Compartment__cell -> none()@Compartment__outside r561_P_mRNA_deg #Modifiers(none)
	mRNA_M_Erg_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate561()) #Modifiers(mRNA_M_Erg)
	mRNA_M_Erg_translation_0_products_0: 0  -> PROTEIN_M_Erg()@Compartment__cell fRate561() #Modifiers(mRNA_M_Erg)
	mRNA_M_Ets1_degradation_0: mRNA_M_Ets1()@Compartment__cell -> none()@Compartment__outside r563_P_mRNA_deg #Modifiers(none)
	mRNA_M_Ets1_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate563()) #Modifiers(mRNA_M_Ets1)
	mRNA_M_Ets1_translation_0_products_0: 0  -> PROTEIN_M_Ets1()@Compartment__cell fRate563() #Modifiers(mRNA_M_Ets1)
	mRNA_M_Eve_degradation_0: mRNA_M_Eve()@Compartment__cell -> none()@Compartment__outside r565_P_mRNA_deg #Modifiers(none)
	mRNA_M_Eve_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate565()) #Modifiers(mRNA_M_Eve)
	mRNA_M_Eve_translation_0_products_0: 0  -> PROTEIN_M_Eve()@Compartment__cell fRate565() #Modifiers(mRNA_M_Eve)
	mRNA_M_Ficolin_degradation_0: mRNA_M_Ficolin()@Compartment__cell -> none()@Compartment__outside r567_P_mRNA_deg #Modifiers(none)
	mRNA_M_Ficolin_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate567()) #Modifiers(mRNA_M_Ficolin)
	mRNA_M_Ficolin_translation_0_products_0: 0  -> PROTEIN_M_Ficolin()@Compartment__cell fRate567() #Modifiers(mRNA_M_Ficolin)
	mRNA_M_FoxA_degradation_0: mRNA_M_FoxA()@Compartment__cell -> none()@Compartment__outside r569_P_mRNA_deg #Modifiers(none)
	mRNA_M_FoxA_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate569()) #Modifiers(mRNA_M_FoxA)
	mRNA_M_FoxA_translation_0_products_0: 0  -> PROTEIN_M_FoxA()@Compartment__cell fRate569() #Modifiers(mRNA_M_FoxA)
	mRNA_M_FoxB_degradation_0: mRNA_M_FoxB()@Compartment__cell -> none()@Compartment__outside r571_P_mRNA_deg #Modifiers(none)
	mRNA_M_FoxB_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate571()) #Modifiers(mRNA_M_FoxB)
	mRNA_M_FoxB_translation_0_products_0: 0  -> PROTEIN_M_FoxB()@Compartment__cell fRate571() #Modifiers(mRNA_M_FoxB)
	mRNA_M_FoxN23_degradation_0: mRNA_M_FoxN23()@Compartment__cell -> none()@Compartment__outside r573_P_mRNA_deg #Modifiers(none)
	mRNA_M_FoxN23_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate573()) #Modifiers(mRNA_M_FoxN23)
	mRNA_M_FoxN23_translation_0_products_0: 0  -> PROTEIN_M_FoxN23()@Compartment__cell fRate573() #Modifiers(mRNA_M_FoxN23)
	mRNA_M_FoxO_degradation_0: mRNA_M_FoxO()@Compartment__cell -> none()@Compartment__outside r575_P_mRNA_deg #Modifiers(none)
	mRNA_M_FoxO_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate575()) #Modifiers(mRNA_M_FoxO)
	mRNA_M_FoxO_translation_0_products_0: 0  -> PROTEIN_M_FoxO()@Compartment__cell fRate575() #Modifiers(mRNA_M_FoxO)
	mRNA_M_FvMo_degradation_0: mRNA_M_FvMo()@Compartment__cell -> none()@Compartment__outside r577_P_mRNA_deg #Modifiers(none)
	mRNA_M_FvMo_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate577()) #Modifiers(mRNA_M_FvMo)
	mRNA_M_FvMo_translation_0_products_0: 0  -> PROTEIN_M_FvMo()@Compartment__cell fRate577() #Modifiers(mRNA_M_FvMo)
	mRNA_M_GataC_degradation_0: mRNA_M_GataC()@Compartment__cell -> none()@Compartment__outside r579_P_mRNA_deg #Modifiers(none)
	mRNA_M_GataC_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate579()) #Modifiers(mRNA_M_GataC)
	mRNA_M_GataC_translation_0_products_0: 0  -> PROTEIN_M_GataC()@Compartment__cell fRate579() #Modifiers(mRNA_M_GataC)
	mRNA_M_GataE_degradation_0: mRNA_M_GataE()@Compartment__cell -> none()@Compartment__outside r581_P_mRNA_deg #Modifiers(none)
	mRNA_M_GataE_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate581()) #Modifiers(mRNA_M_GataE)
	mRNA_M_GataE_translation_0_products_0: 0  -> PROTEIN_M_GataE()@Compartment__cell fRate581() #Modifiers(mRNA_M_GataE)
	mRNA_M_Gcad_degradation_0: mRNA_M_Gcad()@Compartment__cell -> none()@Compartment__outside r583_P_mRNA_deg #Modifiers(none)
	mRNA_M_Gcad_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate583()) #Modifiers(mRNA_M_Gcad)
	mRNA_M_Gcad_translation_0_products_0: 0  -> PROTEIN_M_Gcad()@Compartment__cell fRate583() #Modifiers(mRNA_M_Gcad)
	mRNA_M_Gcm_degradation_0: mRNA_M_Gcm()@Compartment__cell -> none()@Compartment__outside r585_P_mRNA_deg #Modifiers(none)
	mRNA_M_Gcm_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate585()) #Modifiers(mRNA_M_Gcm)
	mRNA_M_Gcm_translation_0_products_0: 0  -> PROTEIN_M_Gcm()@Compartment__cell fRate585() #Modifiers(mRNA_M_Gcm)
	mRNA_M_Gelsolin_degradation_0: mRNA_M_Gelsolin()@Compartment__cell -> none()@Compartment__outside r587_P_mRNA_deg #Modifiers(none)
	mRNA_M_Gelsolin_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate587()) #Modifiers(mRNA_M_Gelsolin)
	mRNA_M_Gelsolin_translation_0_products_0: 0  -> PROTEIN_M_Gelsolin()@Compartment__cell fRate587() #Modifiers(mRNA_M_Gelsolin)
	mRNA_M_HesC_degradation_0: mRNA_M_HesC()@Compartment__cell -> none()@Compartment__outside r589_P_mRNA_deg #Modifiers(none)
	mRNA_M_HesC_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate589()) #Modifiers(mRNA_M_HesC)
	mRNA_M_HesC_translation_0_products_0: 0  -> PROTEIN_M_HesC()@Compartment__cell fRate589() #Modifiers(mRNA_M_HesC)
	mRNA_M_Hex_degradation_0: mRNA_M_Hex()@Compartment__cell -> none()@Compartment__outside r591_P_mRNA_deg #Modifiers(none)
	mRNA_M_Hex_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate591()) #Modifiers(mRNA_M_Hex)
	mRNA_M_Hex_translation_0_products_0: 0  -> PROTEIN_M_Hex()@Compartment__cell fRate591() #Modifiers(mRNA_M_Hex)
	mRNA_M_Hnf6_degradation_0: mRNA_M_Hnf6()@Compartment__cell -> none()@Compartment__outside r593_P_mRNA_deg #Modifiers(none)
	mRNA_M_Hnf6_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate593()) #Modifiers(mRNA_M_Hnf6)
	mRNA_M_Hnf6_translation_0_products_0: 0  -> PROTEIN_M_Hnf6()@Compartment__cell fRate593() #Modifiers(mRNA_M_Hnf6)
	mRNA_M_Hox_degradation_0: mRNA_M_Hox()@Compartment__cell -> none()@Compartment__outside r595_P_mRNA_deg #Modifiers(none)
	mRNA_M_Hox_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate595()) #Modifiers(mRNA_M_Hox)
	mRNA_M_Hox_translation_0_products_0: 0  -> PROTEIN_M_Hox()@Compartment__cell fRate595() #Modifiers(mRNA_M_Hox)
	mRNA_M_Kakapo_degradation_0: mRNA_M_Kakapo()@Compartment__cell -> none()@Compartment__outside r597_P_mRNA_deg #Modifiers(none)
	mRNA_M_Kakapo_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate597()) #Modifiers(mRNA_M_Kakapo)
	mRNA_M_Kakapo_translation_0_products_0: 0  -> PROTEIN_M_Kakapo()@Compartment__cell fRate597() #Modifiers(mRNA_M_Kakapo)
	mRNA_M_Lim_degradation_0: mRNA_M_Lim()@Compartment__cell -> none()@Compartment__outside r599_P_mRNA_deg #Modifiers(none)
	mRNA_M_Lim_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate599()) #Modifiers(mRNA_M_Lim)
	mRNA_M_Lim_translation_0_products_0: 0  -> PROTEIN_M_Lim()@Compartment__cell fRate599() #Modifiers(mRNA_M_Lim)
	mRNA_M_Msp130_degradation_0: mRNA_M_Msp130()@Compartment__cell -> none()@Compartment__outside r601_P_mRNA_deg #Modifiers(none)
	mRNA_M_Msp130_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate601()) #Modifiers(mRNA_M_Msp130)
	mRNA_M_Msp130_translation_0_products_0: 0  -> PROTEIN_M_Msp130()@Compartment__cell fRate601() #Modifiers(mRNA_M_Msp130)
	mRNA_M_MspL_degradation_0: mRNA_M_MspL()@Compartment__cell -> none()@Compartment__outside r603_P_mRNA_deg #Modifiers(none)
	mRNA_M_MspL_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate603()) #Modifiers(mRNA_M_MspL)
	mRNA_M_MspL_translation_0_products_0: 0  -> PROTEIN_M_MspL()@Compartment__cell fRate603() #Modifiers(mRNA_M_MspL)
	mRNA_M_Not_degradation_0: mRNA_M_Not()@Compartment__cell -> none()@Compartment__outside r605_P_mRNA_deg #Modifiers(none)
	mRNA_M_Not_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate605()) #Modifiers(mRNA_M_Not)
	mRNA_M_Not_translation_0_products_0: 0  -> PROTEIN_M_Not()@Compartment__cell fRate605() #Modifiers(mRNA_M_Not)
	mRNA_M_Notch_degradation_0: mRNA_M_Notch()@Compartment__cell -> none()@Compartment__outside r607_P_mRNA_deg #Modifiers(none)
	mRNA_M_Notch_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate607()) #Modifiers(mRNA_M_Notch)
	mRNA_M_Notch_translation_0_products_0: 0  -> PROTEIN_M_Notch()@Compartment__cell fRate607() #Modifiers(mRNA_M_Notch)
	mRNA_M_Nrl_degradation_0: mRNA_M_Nrl()@Compartment__cell -> none()@Compartment__outside r609_P_mRNA_deg #Modifiers(none)
	mRNA_M_Nrl_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate609()) #Modifiers(mRNA_M_Nrl)
	mRNA_M_Nrl_translation_0_products_0: 0  -> PROTEIN_M_Nrl()@Compartment__cell fRate609() #Modifiers(mRNA_M_Nrl)
	mRNA_M_OrCt_degradation_0: mRNA_M_OrCt()@Compartment__cell -> none()@Compartment__outside r611_P_mRNA_deg #Modifiers(none)
	mRNA_M_OrCt_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate611()) #Modifiers(mRNA_M_OrCt)
	mRNA_M_OrCt_translation_0_products_0: 0  -> PROTEIN_M_OrCt()@Compartment__cell fRate611() #Modifiers(mRNA_M_OrCt)
	mRNA_M_Otx_degradation_0: mRNA_M_Otx()@Compartment__cell -> none()@Compartment__outside r613_P_mRNA_deg #Modifiers(none)
	mRNA_M_Otx_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate613()) #Modifiers(mRNA_M_Otx)
	mRNA_M_Otx_translation_0_products_0: 0  -> PROTEIN_M_Otx()@Compartment__cell fRate613() #Modifiers(mRNA_M_Otx)
	mRNA_M_Pks_degradation_0: mRNA_M_Pks()@Compartment__cell -> none()@Compartment__outside r615_P_mRNA_deg #Modifiers(none)
	mRNA_M_Pks_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate615()) #Modifiers(mRNA_M_Pks)
	mRNA_M_Pks_translation_0_products_0: 0  -> PROTEIN_M_Pks()@Compartment__cell fRate615() #Modifiers(mRNA_M_Pks)
	mRNA_M_Pmar1_degradation_0: mRNA_M_Pmar1()@Compartment__cell -> none()@Compartment__outside r617_P_mRNA_deg #Modifiers(none)
	mRNA_M_Pmar1_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate617()) #Modifiers(mRNA_M_Pmar1)
	mRNA_M_Pmar1_translation_0_products_0: 0  -> PROTEIN_M_Pmar1()@Compartment__cell fRate617() #Modifiers(mRNA_M_Pmar1)
	mRNA_M_Sm27_degradation_0: mRNA_M_Sm27()@Compartment__cell -> none()@Compartment__outside r619_P_mRNA_deg #Modifiers(none)
	mRNA_M_Sm27_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate619()) #Modifiers(mRNA_M_Sm27)
	mRNA_M_Sm27_translation_0_products_0: 0  -> PROTEIN_M_Sm27()@Compartment__cell fRate619() #Modifiers(mRNA_M_Sm27)
	mRNA_M_Sm30_degradation_0: mRNA_M_Sm30()@Compartment__cell -> none()@Compartment__outside r621_P_mRNA_deg #Modifiers(none)
	mRNA_M_Sm30_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate621()) #Modifiers(mRNA_M_Sm30)
	mRNA_M_Sm30_translation_0_products_0: 0  -> PROTEIN_M_Sm30()@Compartment__cell fRate621() #Modifiers(mRNA_M_Sm30)
	mRNA_M_Sm50_degradation_0: mRNA_M_Sm50()@Compartment__cell -> none()@Compartment__outside r623_P_mRNA_deg #Modifiers(none)
	mRNA_M_Sm50_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate623()) #Modifiers(mRNA_M_Sm50)
	mRNA_M_Sm50_translation_0_products_0: 0  -> PROTEIN_M_Sm50()@Compartment__cell fRate623() #Modifiers(mRNA_M_Sm50)
	mRNA_M_Snail_degradation_0: mRNA_M_Snail()@Compartment__cell -> none()@Compartment__outside r625_P_mRNA_deg #Modifiers(none)
	mRNA_M_Snail_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate625()) #Modifiers(mRNA_M_Snail)
	mRNA_M_Snail_translation_0_products_0: 0  -> PROTEIN_M_Snail()@Compartment__cell fRate625() #Modifiers(mRNA_M_Snail)
	mRNA_M_SoxB1_degradation_0: mRNA_M_SoxB1()@Compartment__cell -> none()@Compartment__outside r627_P_mRNA_deg #Modifiers(none)
	mRNA_M_SoxB1_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate627()) #Modifiers(mRNA_M_SoxB1)
	mRNA_M_SoxB1_translation_0_products_0: 0  -> PROTEIN_M_SoxB1()@Compartment__cell fRate627() #Modifiers(mRNA_M_SoxB1)
	mRNA_M_SoxC_degradation_0: mRNA_M_SoxC()@Compartment__cell -> none()@Compartment__outside r629_P_mRNA_deg #Modifiers(none)
	mRNA_M_SoxC_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate629()) #Modifiers(mRNA_M_SoxC)
	mRNA_M_SoxC_translation_0_products_0: 0  -> PROTEIN_M_SoxC()@Compartment__cell fRate629() #Modifiers(mRNA_M_SoxC)
	mRNA_M_SuH_degradation_0: mRNA_M_SuH()@Compartment__cell -> none()@Compartment__outside r631_P_mRNA_deg #Modifiers(none)
	mRNA_M_SuH_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate631()) #Modifiers(mRNA_M_SuH)
	mRNA_M_SuH_translation_0_products_0: 0  -> PROTEIN_M_SuH()@Compartment__cell fRate631() #Modifiers(mRNA_M_SuH)
	mRNA_M_SuTx_degradation_0: mRNA_M_SuTx()@Compartment__cell -> none()@Compartment__outside r633_P_mRNA_deg #Modifiers(none)
	mRNA_M_SuTx_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate633()) #Modifiers(mRNA_M_SuTx)
	mRNA_M_SuTx_translation_0_products_0: 0  -> PROTEIN_M_SuTx()@Compartment__cell fRate633() #Modifiers(mRNA_M_SuTx)
	mRNA_M_TBr_degradation_0: mRNA_M_TBr()@Compartment__cell -> none()@Compartment__outside r635_P_mRNA_deg #Modifiers(none)
	mRNA_M_TBr_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate635()) #Modifiers(mRNA_M_TBr)
	mRNA_M_TBr_translation_0_products_0: 0  -> PROTEIN_M_TBr()@Compartment__cell fRate635() #Modifiers(mRNA_M_TBr)
	mRNA_M_Tel_degradation_0: mRNA_M_Tel()@Compartment__cell -> none()@Compartment__outside r637_P_mRNA_deg #Modifiers(none)
	mRNA_M_Tel_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate637()) #Modifiers(mRNA_M_Tel)
	mRNA_M_Tel_translation_0_products_0: 0  -> PROTEIN_M_Tel()@Compartment__cell fRate637() #Modifiers(mRNA_M_Tel)
	mRNA_M_Tgif_degradation_0: mRNA_M_Tgif()@Compartment__cell -> none()@Compartment__outside r639_P_mRNA_deg #Modifiers(none)
	mRNA_M_Tgif_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate639()) #Modifiers(mRNA_M_Tgif)
	mRNA_M_Tgif_translation_0_products_0: 0  -> PROTEIN_M_Tgif()@Compartment__cell fRate639() #Modifiers(mRNA_M_Tgif)
	mRNA_M_UMADelta_degradation_0: mRNA_M_UMADelta()@Compartment__cell -> none()@Compartment__outside r641_P_mRNA_deg #Modifiers(none)
	mRNA_M_UMADelta_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate641()) #Modifiers(mRNA_M_UMADelta)
	mRNA_M_UMADelta_translation_0_products_0: 0  -> PROTEIN_M_UMADelta()@Compartment__cell fRate641() #Modifiers(mRNA_M_UMADelta)
	mRNA_M_UMANrl_degradation_0: mRNA_M_UMANrl()@Compartment__cell -> none()@Compartment__outside r643_P_mRNA_deg #Modifiers(none)
	mRNA_M_UMANrl_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate643()) #Modifiers(mRNA_M_UMANrl)
	mRNA_M_UMANrl_translation_0_products_0: 0  -> PROTEIN_M_UMANrl()@Compartment__cell fRate643() #Modifiers(mRNA_M_UMANrl)
	mRNA_M_UMR_degradation_0: mRNA_M_UMR()@Compartment__cell -> none()@Compartment__outside r645_P_mRNA_deg #Modifiers(none)
	mRNA_M_UMR_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate645()) #Modifiers(mRNA_M_UMR)
	mRNA_M_UMR_translation_0_products_0: 0  -> PROTEIN_M_UMR()@Compartment__cell fRate645() #Modifiers(mRNA_M_UMR)
	mRNA_M_UbiqSoxB1_degradation_0: mRNA_M_UbiqSoxB1()@Compartment__cell -> none()@Compartment__outside r647_P_mRNA_deg #Modifiers(none)
	mRNA_M_UbiqSoxB1_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate647()) #Modifiers(mRNA_M_UbiqSoxB1)
	mRNA_M_UbiqSoxB1_translation_0_products_0: 0  -> PROTEIN_M_UbiqSoxB1()@Compartment__cell fRate647() #Modifiers(mRNA_M_UbiqSoxB1)
	mRNA_M_VEGFR_degradation_0: mRNA_M_VEGFR()@Compartment__cell -> none()@Compartment__outside r649_P_mRNA_deg #Modifiers(none)
	mRNA_M_VEGFR_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate649()) #Modifiers(mRNA_M_VEGFR)
	mRNA_M_VEGFR_translation_0_products_0: 0  -> PROTEIN_M_VEGFR()@Compartment__cell fRate649() #Modifiers(mRNA_M_VEGFR)
	mRNA_M_Wnt8_degradation_0: mRNA_M_Wnt8()@Compartment__cell -> none()@Compartment__outside r651_P_mRNA_deg #Modifiers(none)
	mRNA_M_Wnt8_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate651()) #Modifiers(mRNA_M_Wnt8)
	mRNA_M_Wnt8_translation_0_products_0: 0  -> PROTEIN_M_Wnt8()@Compartment__cell fRate651() #Modifiers(mRNA_M_Wnt8)
	mRNA_M_cB_degradation_0: mRNA_M_cB()@Compartment__cell -> none()@Compartment__outside r653_P_mRNA_deg #Modifiers(none)
	mRNA_M_cB_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate653()) #Modifiers(mRNA_M_cB)
	mRNA_M_cB_translation_0_products_0: 0  -> PROTEIN_M_cB()@Compartment__cell fRate653() #Modifiers(mRNA_M_cB)
	mRNA_M_z13_degradation_0: mRNA_M_z13()@Compartment__cell -> none()@Compartment__outside r655_P_mRNA_deg #Modifiers(none)
	mRNA_M_z13_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate655()) #Modifiers(mRNA_M_z13)
	mRNA_M_z13_translation_0_products_0: 0  -> PROTEIN_M_z13()@Compartment__cell fRate655() #Modifiers(mRNA_M_z13)
	mRNA_P_Alx1_degradation_0: mRNA_P_Alx1()@Compartment__cell -> none()@Compartment__outside r657_P_mRNA_deg #Modifiers(none)
	mRNA_P_Alx1_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate657()) #Modifiers(mRNA_P_Alx1)
	mRNA_P_Alx1_translation_0_products_0: 0  -> PROTEIN_P_Alx1()@Compartment__cell fRate657() #Modifiers(mRNA_P_Alx1)
	mRNA_P_Apobec_degradation_0: mRNA_P_Apobec()@Compartment__cell -> none()@Compartment__outside r659_P_mRNA_deg #Modifiers(none)
	mRNA_P_Apobec_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate659()) #Modifiers(mRNA_P_Apobec)
	mRNA_P_Apobec_translation_0_products_0: 0  -> PROTEIN_P_Apobec()@Compartment__cell fRate659() #Modifiers(mRNA_P_Apobec)
	mRNA_P_Blimp1_degradation_0: mRNA_P_Blimp1()@Compartment__cell -> none()@Compartment__outside r661_P_mRNA_deg #Modifiers(none)
	mRNA_P_Blimp1_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate661()) #Modifiers(mRNA_P_Blimp1)
	mRNA_P_Blimp1_translation_0_products_0: 0  -> PROTEIN_P_Blimp1()@Compartment__cell fRate661() #Modifiers(mRNA_P_Blimp1)
	mRNA_P_Bra_degradation_0: mRNA_P_Bra()@Compartment__cell -> none()@Compartment__outside r663_P_mRNA_deg #Modifiers(none)
	mRNA_P_Bra_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate663()) #Modifiers(mRNA_P_Bra)
	mRNA_P_Bra_translation_0_products_0: 0  -> PROTEIN_P_Bra()@Compartment__cell fRate663() #Modifiers(mRNA_P_Bra)
	mRNA_P_Brn_degradation_0: mRNA_P_Brn()@Compartment__cell -> none()@Compartment__outside r665_P_mRNA_deg #Modifiers(none)
	mRNA_P_Brn_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate665()) #Modifiers(mRNA_P_Brn)
	mRNA_P_Brn_translation_0_products_0: 0  -> PROTEIN_P_Brn()@Compartment__cell fRate665() #Modifiers(mRNA_P_Brn)
	mRNA_P_CAPK_degradation_0: mRNA_P_CAPK()@Compartment__cell -> none()@Compartment__outside r667_P_mRNA_deg #Modifiers(none)
	mRNA_P_CAPK_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate667()) #Modifiers(mRNA_P_CAPK)
	mRNA_P_CAPK_translation_0_products_0: 0  -> PROTEIN_P_CAPK()@Compartment__cell fRate667() #Modifiers(mRNA_P_CAPK)
	mRNA_P_CyP_degradation_0: mRNA_P_CyP()@Compartment__cell -> none()@Compartment__outside r669_P_mRNA_deg #Modifiers(none)
	mRNA_P_CyP_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate669()) #Modifiers(mRNA_P_CyP)
	mRNA_P_CyP_translation_0_products_0: 0  -> PROTEIN_P_CyP()@Compartment__cell fRate669() #Modifiers(mRNA_P_CyP)
	mRNA_P_Delta_degradation_0: mRNA_P_Delta()@Compartment__cell -> none()@Compartment__outside r671_P_mRNA_deg #Modifiers(none)
	mRNA_P_Delta_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate671()) #Modifiers(mRNA_P_Delta)
	mRNA_P_Delta_translation_0_products_0: 0  -> PROTEIN_P_Delta()@Compartment__cell fRate671() #Modifiers(mRNA_P_Delta)
	mRNA_P_Dpt_degradation_0: mRNA_P_Dpt()@Compartment__cell -> none()@Compartment__outside r673_P_mRNA_deg #Modifiers(none)
	mRNA_P_Dpt_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate673()) #Modifiers(mRNA_P_Dpt)
	mRNA_P_Dpt_translation_0_products_0: 0  -> PROTEIN_P_Dpt()@Compartment__cell fRate673() #Modifiers(mRNA_P_Dpt)
	mRNA_P_Dri_degradation_0: mRNA_P_Dri()@Compartment__cell -> none()@Compartment__outside r675_P_mRNA_deg #Modifiers(none)
	mRNA_P_Dri_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate675()) #Modifiers(mRNA_P_Dri)
	mRNA_P_Dri_translation_0_products_0: 0  -> PROTEIN_P_Dri()@Compartment__cell fRate675() #Modifiers(mRNA_P_Dri)
	mRNA_P_Endo16_degradation_0: mRNA_P_Endo16()@Compartment__cell -> none()@Compartment__outside r677_P_mRNA_deg #Modifiers(none)
	mRNA_P_Endo16_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate677()) #Modifiers(mRNA_P_Endo16)
	mRNA_P_Endo16_translation_0_products_0: 0  -> PROTEIN_P_Endo16()@Compartment__cell fRate677() #Modifiers(mRNA_P_Endo16)
	mRNA_P_Erg_degradation_0: mRNA_P_Erg()@Compartment__cell -> none()@Compartment__outside r679_P_mRNA_deg #Modifiers(none)
	mRNA_P_Erg_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate679()) #Modifiers(mRNA_P_Erg)
	mRNA_P_Erg_translation_0_products_0: 0  -> PROTEIN_P_Erg()@Compartment__cell fRate679() #Modifiers(mRNA_P_Erg)
	mRNA_P_Ets1_degradation_0: mRNA_P_Ets1()@Compartment__cell -> none()@Compartment__outside r681_P_mRNA_deg #Modifiers(none)
	mRNA_P_Ets1_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate681()) #Modifiers(mRNA_P_Ets1)
	mRNA_P_Ets1_translation_0_products_0: 0  -> PROTEIN_P_Ets1()@Compartment__cell fRate681() #Modifiers(mRNA_P_Ets1)
	mRNA_P_Eve_degradation_0: mRNA_P_Eve()@Compartment__cell -> none()@Compartment__outside r683_P_mRNA_deg #Modifiers(none)
	mRNA_P_Eve_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate683()) #Modifiers(mRNA_P_Eve)
	mRNA_P_Eve_translation_0_products_0: 0  -> PROTEIN_P_Eve()@Compartment__cell fRate683() #Modifiers(mRNA_P_Eve)
	mRNA_P_Ficolin_degradation_0: mRNA_P_Ficolin()@Compartment__cell -> none()@Compartment__outside r685_P_mRNA_deg #Modifiers(none)
	mRNA_P_Ficolin_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate685()) #Modifiers(mRNA_P_Ficolin)
	mRNA_P_Ficolin_translation_0_products_0: 0  -> PROTEIN_P_Ficolin()@Compartment__cell fRate685() #Modifiers(mRNA_P_Ficolin)
	mRNA_P_FoxA_degradation_0: mRNA_P_FoxA()@Compartment__cell -> none()@Compartment__outside r687_P_mRNA_deg #Modifiers(none)
	mRNA_P_FoxA_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate687()) #Modifiers(mRNA_P_FoxA)
	mRNA_P_FoxA_translation_0_products_0: 0  -> PROTEIN_P_FoxA()@Compartment__cell fRate687() #Modifiers(mRNA_P_FoxA)
	mRNA_P_FoxB_degradation_0: mRNA_P_FoxB()@Compartment__cell -> none()@Compartment__outside r689_P_mRNA_deg #Modifiers(none)
	mRNA_P_FoxB_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate689()) #Modifiers(mRNA_P_FoxB)
	mRNA_P_FoxB_translation_0_products_0: 0  -> PROTEIN_P_FoxB()@Compartment__cell fRate689() #Modifiers(mRNA_P_FoxB)
	mRNA_P_FoxN23_degradation_0: mRNA_P_FoxN23()@Compartment__cell -> none()@Compartment__outside r691_P_mRNA_deg #Modifiers(none)
	mRNA_P_FoxN23_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate691()) #Modifiers(mRNA_P_FoxN23)
	mRNA_P_FoxN23_translation_0_products_0: 0  -> PROTEIN_P_FoxN23()@Compartment__cell fRate691() #Modifiers(mRNA_P_FoxN23)
	mRNA_P_FoxO_degradation_0: mRNA_P_FoxO()@Compartment__cell -> none()@Compartment__outside r693_P_mRNA_deg #Modifiers(none)
	mRNA_P_FoxO_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate693()) #Modifiers(mRNA_P_FoxO)
	mRNA_P_FoxO_translation_0_products_0: 0  -> PROTEIN_P_FoxO()@Compartment__cell fRate693() #Modifiers(mRNA_P_FoxO)
	mRNA_P_FvMo_degradation_0: mRNA_P_FvMo()@Compartment__cell -> none()@Compartment__outside r695_P_mRNA_deg #Modifiers(none)
	mRNA_P_FvMo_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate695()) #Modifiers(mRNA_P_FvMo)
	mRNA_P_FvMo_translation_0_products_0: 0  -> PROTEIN_P_FvMo()@Compartment__cell fRate695() #Modifiers(mRNA_P_FvMo)
	mRNA_P_GataC_degradation_0: mRNA_P_GataC()@Compartment__cell -> none()@Compartment__outside r697_P_mRNA_deg #Modifiers(none)
	mRNA_P_GataC_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate697()) #Modifiers(mRNA_P_GataC)
	mRNA_P_GataC_translation_0_products_0: 0  -> PROTEIN_P_GataC()@Compartment__cell fRate697() #Modifiers(mRNA_P_GataC)
	mRNA_P_GataE_degradation_0: mRNA_P_GataE()@Compartment__cell -> none()@Compartment__outside r699_P_mRNA_deg #Modifiers(none)
	mRNA_P_GataE_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate699()) #Modifiers(mRNA_P_GataE)
	mRNA_P_GataE_translation_0_products_0: 0  -> PROTEIN_P_GataE()@Compartment__cell fRate699() #Modifiers(mRNA_P_GataE)
	mRNA_P_Gcad_degradation_0: mRNA_P_Gcad()@Compartment__cell -> none()@Compartment__outside r701_P_mRNA_deg #Modifiers(none)
	mRNA_P_Gcad_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate701()) #Modifiers(mRNA_P_Gcad)
	mRNA_P_Gcad_translation_0_products_0: 0  -> PROTEIN_P_Gcad()@Compartment__cell fRate701() #Modifiers(mRNA_P_Gcad)
	mRNA_P_Gcm_degradation_0: mRNA_P_Gcm()@Compartment__cell -> none()@Compartment__outside r703_P_mRNA_deg #Modifiers(none)
	mRNA_P_Gcm_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate703()) #Modifiers(mRNA_P_Gcm)
	mRNA_P_Gcm_translation_0_products_0: 0  -> PROTEIN_P_Gcm()@Compartment__cell fRate703() #Modifiers(mRNA_P_Gcm)
	mRNA_P_Gelsolin_degradation_0: mRNA_P_Gelsolin()@Compartment__cell -> none()@Compartment__outside r705_P_mRNA_deg #Modifiers(none)
	mRNA_P_Gelsolin_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate705()) #Modifiers(mRNA_P_Gelsolin)
	mRNA_P_Gelsolin_translation_0_products_0: 0  -> PROTEIN_P_Gelsolin()@Compartment__cell fRate705() #Modifiers(mRNA_P_Gelsolin)
	mRNA_P_HesC_degradation_0: mRNA_P_HesC()@Compartment__cell -> none()@Compartment__outside r707_P_mRNA_deg #Modifiers(none)
	mRNA_P_HesC_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate707()) #Modifiers(mRNA_P_HesC)
	mRNA_P_HesC_translation_0_products_0: 0  -> PROTEIN_P_HesC()@Compartment__cell fRate707() #Modifiers(mRNA_P_HesC)
	mRNA_P_Hex_degradation_0: mRNA_P_Hex()@Compartment__cell -> none()@Compartment__outside r709_P_mRNA_deg #Modifiers(none)
	mRNA_P_Hex_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate709()) #Modifiers(mRNA_P_Hex)
	mRNA_P_Hex_translation_0_products_0: 0  -> PROTEIN_P_Hex()@Compartment__cell fRate709() #Modifiers(mRNA_P_Hex)
	mRNA_P_Hnf6_degradation_0: mRNA_P_Hnf6()@Compartment__cell -> none()@Compartment__outside r711_P_mRNA_deg #Modifiers(none)
	mRNA_P_Hnf6_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate711()) #Modifiers(mRNA_P_Hnf6)
	mRNA_P_Hnf6_translation_0_products_0: 0  -> PROTEIN_P_Hnf6()@Compartment__cell fRate711() #Modifiers(mRNA_P_Hnf6)
	mRNA_P_Hox_degradation_0: mRNA_P_Hox()@Compartment__cell -> none()@Compartment__outside r713_P_mRNA_deg #Modifiers(none)
	mRNA_P_Hox_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate713()) #Modifiers(mRNA_P_Hox)
	mRNA_P_Hox_translation_0_products_0: 0  -> PROTEIN_P_Hox()@Compartment__cell fRate713() #Modifiers(mRNA_P_Hox)
	mRNA_P_Kakapo_degradation_0: mRNA_P_Kakapo()@Compartment__cell -> none()@Compartment__outside r715_P_mRNA_deg #Modifiers(none)
	mRNA_P_Kakapo_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate715()) #Modifiers(mRNA_P_Kakapo)
	mRNA_P_Kakapo_translation_0_products_0: 0  -> PROTEIN_P_Kakapo()@Compartment__cell fRate715() #Modifiers(mRNA_P_Kakapo)
	mRNA_P_L1_degradation_0: mRNA_P_L1()@Compartment__cell -> none()@Compartment__outside r717_P_mRNA_deg #Modifiers(none)
	mRNA_P_L1_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate717()) #Modifiers(mRNA_P_L1)
	mRNA_P_L1_translation_0_products_0: 0  -> PROTEIN_P_L1()@Compartment__cell fRate717() #Modifiers(mRNA_P_L1)
	mRNA_P_Lim_degradation_0: mRNA_P_Lim()@Compartment__cell -> none()@Compartment__outside r719_P_mRNA_deg #Modifiers(none)
	mRNA_P_Lim_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate719()) #Modifiers(mRNA_P_Lim)
	mRNA_P_Lim_translation_0_products_0: 0  -> PROTEIN_P_Lim()@Compartment__cell fRate719() #Modifiers(mRNA_P_Lim)
	mRNA_P_Msp130_degradation_0: mRNA_P_Msp130()@Compartment__cell -> none()@Compartment__outside r721_P_mRNA_deg #Modifiers(none)
	mRNA_P_Msp130_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate721()) #Modifiers(mRNA_P_Msp130)
	mRNA_P_Msp130_translation_0_products_0: 0  -> PROTEIN_P_Msp130()@Compartment__cell fRate721() #Modifiers(mRNA_P_Msp130)
	mRNA_P_MspL_degradation_0: mRNA_P_MspL()@Compartment__cell -> none()@Compartment__outside r723_P_mRNA_deg #Modifiers(none)
	mRNA_P_MspL_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate723()) #Modifiers(mRNA_P_MspL)
	mRNA_P_MspL_translation_0_products_0: 0  -> PROTEIN_P_MspL()@Compartment__cell fRate723() #Modifiers(mRNA_P_MspL)
	mRNA_P_Not_degradation_0: mRNA_P_Not()@Compartment__cell -> none()@Compartment__outside r725_P_mRNA_deg #Modifiers(none)
	mRNA_P_Not_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate725()) #Modifiers(mRNA_P_Not)
	mRNA_P_Not_translation_0_products_0: 0  -> PROTEIN_P_Not()@Compartment__cell fRate725() #Modifiers(mRNA_P_Not)
	mRNA_P_Nrl_degradation_0: mRNA_P_Nrl()@Compartment__cell -> none()@Compartment__outside r727_P_mRNA_deg #Modifiers(none)
	mRNA_P_Nrl_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate727()) #Modifiers(mRNA_P_Nrl)
	mRNA_P_Nrl_translation_0_products_0: 0  -> PROTEIN_P_Nrl()@Compartment__cell fRate727() #Modifiers(mRNA_P_Nrl)
	mRNA_P_OrCt_degradation_0: mRNA_P_OrCt()@Compartment__cell -> none()@Compartment__outside r729_P_mRNA_deg #Modifiers(none)
	mRNA_P_OrCt_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate729()) #Modifiers(mRNA_P_OrCt)
	mRNA_P_OrCt_translation_0_products_0: 0  -> PROTEIN_P_OrCt()@Compartment__cell fRate729() #Modifiers(mRNA_P_OrCt)
	mRNA_P_Otx_degradation_0: mRNA_P_Otx()@Compartment__cell -> none()@Compartment__outside r731_P_mRNA_deg #Modifiers(none)
	mRNA_P_Otx_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate731()) #Modifiers(mRNA_P_Otx)
	mRNA_P_Otx_translation_0_products_0: 0  -> PROTEIN_P_Otx()@Compartment__cell fRate731() #Modifiers(mRNA_P_Otx)
	mRNA_P_Pks_degradation_0: mRNA_P_Pks()@Compartment__cell -> none()@Compartment__outside r733_P_mRNA_deg #Modifiers(none)
	mRNA_P_Pks_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate733()) #Modifiers(mRNA_P_Pks)
	mRNA_P_Pks_translation_0_products_0: 0  -> PROTEIN_P_Pks()@Compartment__cell fRate733() #Modifiers(mRNA_P_Pks)
	mRNA_P_Pmar1_degradation_0: mRNA_P_Pmar1()@Compartment__cell -> none()@Compartment__outside r735_P_mRNA_deg #Modifiers(none)
	mRNA_P_Pmar1_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate735()) #Modifiers(mRNA_P_Pmar1)
	mRNA_P_Pmar1_translation_0_products_0: 0  -> PROTEIN_P_Pmar1()@Compartment__cell fRate735() #Modifiers(mRNA_P_Pmar1)
	mRNA_P_Sm27_degradation_0: mRNA_P_Sm27()@Compartment__cell -> none()@Compartment__outside r737_P_mRNA_deg #Modifiers(none)
	mRNA_P_Sm27_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate737()) #Modifiers(mRNA_P_Sm27)
	mRNA_P_Sm27_translation_0_products_0: 0  -> PROTEIN_P_Sm27()@Compartment__cell fRate737() #Modifiers(mRNA_P_Sm27)
	mRNA_P_Sm30_degradation_0: mRNA_P_Sm30()@Compartment__cell -> none()@Compartment__outside r739_P_mRNA_deg #Modifiers(none)
	mRNA_P_Sm30_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate739()) #Modifiers(mRNA_P_Sm30)
	mRNA_P_Sm30_translation_0_products_0: 0  -> PROTEIN_P_Sm30()@Compartment__cell fRate739() #Modifiers(mRNA_P_Sm30)
	mRNA_P_Sm50_degradation_0: mRNA_P_Sm50()@Compartment__cell -> none()@Compartment__outside r741_P_mRNA_deg #Modifiers(none)
	mRNA_P_Sm50_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate741()) #Modifiers(mRNA_P_Sm50)
	mRNA_P_Sm50_translation_0_products_0: 0  -> PROTEIN_P_Sm50()@Compartment__cell fRate741() #Modifiers(mRNA_P_Sm50)
	mRNA_P_Snail_degradation_0: mRNA_P_Snail()@Compartment__cell -> none()@Compartment__outside r743_P_mRNA_deg #Modifiers(none)
	mRNA_P_Snail_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate743()) #Modifiers(mRNA_P_Snail)
	mRNA_P_Snail_translation_0_products_0: 0  -> PROTEIN_P_Snail()@Compartment__cell fRate743() #Modifiers(mRNA_P_Snail)
	mRNA_P_SoxB1_degradation_0: mRNA_P_SoxB1()@Compartment__cell -> none()@Compartment__outside r745_P_mRNA_deg #Modifiers(none)
	mRNA_P_SoxB1_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate745()) #Modifiers(mRNA_P_SoxB1)
	mRNA_P_SoxB1_translation_0_products_0: 0  -> PROTEIN_P_SoxB1()@Compartment__cell fRate745() #Modifiers(mRNA_P_SoxB1)
	mRNA_P_SoxC_degradation_0: mRNA_P_SoxC()@Compartment__cell -> none()@Compartment__outside r747_P_mRNA_deg #Modifiers(none)
	mRNA_P_SoxC_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate747()) #Modifiers(mRNA_P_SoxC)
	mRNA_P_SoxC_translation_0_products_0: 0  -> PROTEIN_P_SoxC()@Compartment__cell fRate747() #Modifiers(mRNA_P_SoxC)
	mRNA_P_SuTx_degradation_0: mRNA_P_SuTx()@Compartment__cell -> none()@Compartment__outside r749_P_mRNA_deg #Modifiers(none)
	mRNA_P_SuTx_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate749()) #Modifiers(mRNA_P_SuTx)
	mRNA_P_SuTx_translation_0_products_0: 0  -> PROTEIN_P_SuTx()@Compartment__cell fRate749() #Modifiers(mRNA_P_SuTx)
	mRNA_P_TBr_degradation_0: mRNA_P_TBr()@Compartment__cell -> none()@Compartment__outside r751_P_mRNA_deg #Modifiers(none)
	mRNA_P_TBr_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate751()) #Modifiers(mRNA_P_TBr)
	mRNA_P_TBr_translation_0_products_0: 0  -> PROTEIN_P_TBr()@Compartment__cell fRate751() #Modifiers(mRNA_P_TBr)
	mRNA_P_Tel_degradation_0: mRNA_P_Tel()@Compartment__cell -> none()@Compartment__outside r753_P_mRNA_deg #Modifiers(none)
	mRNA_P_Tel_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate753()) #Modifiers(mRNA_P_Tel)
	mRNA_P_Tel_translation_0_products_0: 0  -> PROTEIN_P_Tel()@Compartment__cell fRate753() #Modifiers(mRNA_P_Tel)
	mRNA_P_Tgif_degradation_0: mRNA_P_Tgif()@Compartment__cell -> none()@Compartment__outside r755_P_mRNA_deg #Modifiers(none)
	mRNA_P_Tgif_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate755()) #Modifiers(mRNA_P_Tgif)
	mRNA_P_Tgif_translation_0_products_0: 0  -> PROTEIN_P_Tgif()@Compartment__cell fRate755() #Modifiers(mRNA_P_Tgif)
	mRNA_P_UbiqAlx1_degradation_0: mRNA_P_UbiqAlx1()@Compartment__cell -> none()@Compartment__outside r757_P_mRNA_deg #Modifiers(none)
	mRNA_P_UbiqAlx1_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate757()) #Modifiers(mRNA_P_UbiqAlx1)
	mRNA_P_UbiqAlx1_translation_0_products_0: 0  -> PROTEIN_P_UbiqAlx1()@Compartment__cell fRate757() #Modifiers(mRNA_P_UbiqAlx1)
	mRNA_P_UbiqES_degradation_0: mRNA_P_UbiqES()@Compartment__cell -> none()@Compartment__outside r759_P_mRNA_deg #Modifiers(none)
	mRNA_P_UbiqES_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate759()) #Modifiers(mRNA_P_UbiqES)
	mRNA_P_UbiqES_translation_0_products_0: 0  -> PROTEIN_P_UbiqES()@Compartment__cell fRate759() #Modifiers(mRNA_P_UbiqES)
	mRNA_P_UbiqEts1_degradation_0: mRNA_P_UbiqEts1()@Compartment__cell -> none()@Compartment__outside r761_P_mRNA_deg #Modifiers(none)
	mRNA_P_UbiqEts1_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate761()) #Modifiers(mRNA_P_UbiqEts1)
	mRNA_P_UbiqEts1_translation_0_products_0: 0  -> PROTEIN_P_UbiqEts1()@Compartment__cell fRate761() #Modifiers(mRNA_P_UbiqEts1)
	mRNA_P_UbiqHesC_degradation_0: mRNA_P_UbiqHesC()@Compartment__cell -> none()@Compartment__outside r763_P_mRNA_deg #Modifiers(none)
	mRNA_P_UbiqHesC_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate763()) #Modifiers(mRNA_P_UbiqHesC)
	mRNA_P_UbiqHesC_translation_0_products_0: 0  -> PROTEIN_P_UbiqHesC()@Compartment__cell fRate763() #Modifiers(mRNA_P_UbiqHesC)
	mRNA_P_UbiqHnf6_degradation_0: mRNA_P_UbiqHnf6()@Compartment__cell -> none()@Compartment__outside r765_P_mRNA_deg #Modifiers(none)
	mRNA_P_UbiqHnf6_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate765()) #Modifiers(mRNA_P_UbiqHnf6)
	mRNA_P_UbiqHnf6_translation_0_products_0: 0  -> PROTEIN_P_UbiqHnf6()@Compartment__cell fRate765() #Modifiers(mRNA_P_UbiqHnf6)
	mRNA_P_UbiqSoxC_degradation_0: mRNA_P_UbiqSoxC()@Compartment__cell -> none()@Compartment__outside r767_P_mRNA_deg #Modifiers(none)
	mRNA_P_UbiqSoxC_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate767()) #Modifiers(mRNA_P_UbiqSoxC)
	mRNA_P_UbiqSoxC_translation_0_products_0: 0  -> PROTEIN_P_UbiqSoxC()@Compartment__cell fRate767() #Modifiers(mRNA_P_UbiqSoxC)
	mRNA_P_UbiqTel_degradation_0: mRNA_P_UbiqTel()@Compartment__cell -> none()@Compartment__outside r769_P_mRNA_deg #Modifiers(none)
	mRNA_P_UbiqTel_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate769()) #Modifiers(mRNA_P_UbiqTel)
	mRNA_P_UbiqTel_translation_0_products_0: 0  -> PROTEIN_P_UbiqTel()@Compartment__cell fRate769() #Modifiers(mRNA_P_UbiqTel)
	mRNA_P_VEGFR_degradation_0: mRNA_P_VEGFR()@Compartment__cell -> none()@Compartment__outside r771_P_mRNA_deg
	mRNA_P_VEGFR_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate771()) #Modifiers(mRNA_P_VEGFR)
	mRNA_P_VEGFR_translation_0_products_0: 0  -> PROTEIN_P_VEGFR()@Compartment__cell fRate771() #Modifiers(mRNA_P_VEGFR)
	mRNA_P_Wnt8_degradation_0: mRNA_P_Wnt8()@Compartment__cell -> none()@Compartment__outside r773_P_mRNA_deg #Modifiers(none)
	mRNA_P_Wnt8_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate773()) #Modifiers(mRNA_P_Wnt8)
	mRNA_P_Wnt8_translation_0_products_0: 0  -> PROTEIN_P_Wnt8()@Compartment__cell fRate773() #Modifiers(mRNA_P_Wnt8)
	mRNA_P_cB_degradation_0: mRNA_P_cB()@Compartment__cell -> none()@Compartment__outside r775_P_mRNA_deg #Modifiers(none)
	mRNA_P_cB_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate775()) #Modifiers(mRNA_P_cB)
	mRNA_P_cB_translation_0_products_0: 0  -> PROTEIN_P_cB()@Compartment__cell fRate775() #Modifiers(mRNA_P_cB)
	mRNA_P_z13_degradation_0: mRNA_P_z13()@Compartment__cell -> none()@Compartment__outside r777_P_mRNA_deg #Modifiers(none)
	mRNA_P_z13_translation_0_reactants_0: 0  -> none()@Compartment__outside -1*(fRate777()) #Modifiers(mRNA_P_z13)
	mRNA_P_z13_translation_0_products_0: 0  -> PROTEIN_P_z13()@Compartment__cell fRate777() #Modifiers(mRNA_P_z13)
end reaction rules
end model
