###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL8237240421', 'http://identifiers.org/biomodels.db/BIOMD0000000240']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/18414485']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/1423', 'http://identifiers.org/taxonomy/10160']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0035635', 'http://identifiers.org/go/GO:0034301']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is a plain translation of an SBML model created on 14/08/2021. The original model has 6 molecules and 14 reactions. The translated model has 6 molecules and 14 rules'
###
begin model
begin parameters
	Imax 0.048
	Io 0.004
	Irmax 0.4
	Iro 0.02
	K 7.0
	Kdim 12.0
	Kr 7.0
	Kr1 7.0
	R 7.0
	V 1.0
	ka 0.025
	kd 0.1
	kdeg 0.0004
	kdegA 0.0001
	kdegm 0.01
	ksyn 0.04
	ksyn1 0.04
	p 0.15
	q 0.004
	ratio 0.026666667
end parameters
begin molecule types
	mAprE()
	AprE()
	DegUP()
	mDegU()
	DegU()
	Dim()
end molecule types
begin seed species
	DegU() 10.0 #DegU #DegU
end seed species
begin observables
	Species AprE AprE() #AprE
	Species DegU DegU() #DegU
	Species DegUP DegUP() #DegUP
	Species Dim Dim() #Dim
	Species mAprE mAprE() #mAprE
	Species mDegU mDegU() #mDegU
end observables
begin functions
	DegU_Total() = DegU + DegUP + 2*Dim
	kdephos() = q/ratio
	kphos() = p*ratio
	fRate1() = ksyn*mAprE
	fRate10() = Kr*Kr1*(1.0*Dim^2*Irmax + 1.0*Dim*Iro*Kdim + Iro*Kdim^2)/(1.0*Dim^2*Kr*Kr1 + 1.0*Dim^2*Kr*R + 1.0*Dim*Kdim*Kr*Kr1 + 1.0*Dim*Kdim*Kr*R + 1.0*Kdim^2*Kr*Kr1 + 1.0*Kdim^2*Kr*R + 1.0*Kdim^2*Kr1*R + 1.0*Kdim^2*R^2)
	fRate12() = ksyn1*mDegU
	fRate13() = (1.0*Dim*Imax + Io*K)/(1.0*Dim + 1.0*K)
end functions
begin reaction rules
	AprEdeg: AprE() -> 0  kdeg
	AprEsyn: 0  -> AprE() fRate1() #Modifiers(mAprE)
	DimerAss: DegUP() + DegUP() -> Dim() ka
	DimerDis: Dim() -> DegUP() + DegUP() kd
	degradation1: DegU() -> 0  kdeg
	degradation2: DegUP() -> 0  kdeg
	degradation3: Dim() -> 0  kdeg
	degradationmRNA: mDegU() -> 0  kdegm
	dephosphorylation: DegUP() -> DegU() kdephos
	mRNAAprEdeg: mAprE() -> 0  kdegm
	mRNAAprEsyn: 0  -> mAprE() fRate10() #Modifiers(Dim)
	phosphorylation: DegU() -> DegUP() kphos
	synthesisDegU: 0  -> DegU() fRate12() #Modifiers(mDegU)
	synthesismRNA: 0  -> mDegU() fRate13() #Modifiers(Dim)
end reaction rules
end model
