###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000244', 'http://identifiers.org/biomodels.db/MODEL1003100000']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/20212527']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/562']
#@BQB_HAS_VERSION:['http://identifiers.org/go/GO:0006097', 'http://identifiers.org/go/GO:0006096', 'http://identifiers.org/go/GO:0006094', 'http://identifiers.org/go/GO:0006083', 'http://identifiers.org/go/GO:0008965']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0045734', 'http://identifiers.org/go/GO:0010906']
#@creatorEmail:'lukas@ebi.ac.uk'
#@creatorName:'Endler Lukas'
#@notes:'This is a plain translation of an SBML model created on 14/08/2021. The original model has 47 molecules and 109 reactions. The translated model has 47 molecules and 114 rules'
###
begin model
begin parameters
	env_M_ACT 60.05
	env_M_GLC 180.156
	env_uc 9.5e-07
	e_AceA_kcat 614.0
	e_AceA_n 4.0
	e_AceA_L 50100.0
	e_AceA_Kict 0.022
	e_AceA_Kpep 0.055
	e_AceA_Kpg3 0.72
	e_AceA_Kakg 0.827
	e_AceB_kcat 47.8
	e_AceB_Kglx 0.95
	e_AceB_Kacoa 0.755
	e_AceB_Kglxacoa 0.719
	e_AceK_kcat_ki 3400000000000.0
	e_AceK_kcat_ph 1700000000.0
	e_AceK_n 2.0
	e_AceK_L 100000000.0
	e_AceK_Kicd 0.043
	e_AceK_Kicd_P 0.643
	e_AceK_Kpep 0.539
	e_AceK_Kpyr 0.038
	e_AceK_Koaa 0.173
	e_AceK_Kglx 0.866
	e_AceK_Kakg 0.82
	e_AceK_Kpg3 1.57
	e_AceK_Kict 0.137
	e_Acoa2act_kcat 3079.0
	e_Acoa2act_n 2.0
	e_Acoa2act_L 639000.0
	e_Acoa2act_Kacoa 0.022
	e_Acoa2act_Kpyr 0.022
	e_Acs_kcat 340.0
	e_Acs_Kact 0.001
	e_Akg2mal_kcat 1530.0
	e_Akg2mal_Kakg 0.548
	e_CAMPdegr_kcat 1000.0
	e_CAMPdegr_KcAMP 0.1
	e_Cya_kcat 993.0
	e_Cya_KEIIA 0.0017
	e_Emp_kcat_f 1000.0
	e_Emp_kcat_r 848.0
	e_Emp_Kfbp 5.92
	e_Emp_Kpg3 16.6
	e_Eno_kcatf 695.0
	e_Eno_kcatr 522.0
	e_Eno_Kpg3 4.76
	e_Eno_Kpep 1.11
	e_Fdp_kcat 192.0
	e_Fdp_n 4.0
	e_Fdp_L 4000000.0
	e_Fdp_Kfbp 0.003
	e_Fdp_Kpep 0.3
	e_GltA_kcat 1614.0
	e_GltA_Koaa 0.029
	e_GltA_Kacoa 0.212
	e_GltA_Koaaacoa 0.029
	e_GltA_Kakg 0.63
	e_Icd_kcat 695.0
	e_Icd_n 2.0
	e_Icd_L 127.0
	e_Icd_Kict 0.00016
	e_Icd_Kpep 0.334
	e_Mdh_kcat 773.0
	e_Mdh_n 1.7
	e_Mdh_Kmal 10.1
	e_Me_kcat 1879.0
	e_Me_n 1.33
	e_Me_L 104000.0
	e_Me_Kmal 0.00624
	e_Me_Kacoa 3.64
	e_Me_Kcamp 6.54
	e_PckA_kcat 55.5
	e_PckA_Koaa 0.184
	e_PckA_Kpep 1000.0
	e_Pdh_kcat 1179.0
	e_Pdh_n 2.65
	e_Pdh_L 3.4
	e_Pdh_Kpyr 0.128
	e_Pdh_KpyrI 0.231
	e_Pdh_Kglx 0.218
	e_PfkA_kcat 908000.0
	e_PfkA_n 4.0
	e_PfkA_L 95000000.0
	e_PfkA_Kg6p 0.022
	e_PfkA_Kpep 0.138
	e_Ppc_kcat 5635.0
	e_Ppc_n 3.0
	e_Ppc_L 5200000.0
	e_Ppc_Kpep 0.048
	e_Ppc_Kfbp 0.408
	e_PpsA_kcat 1.32
	e_PpsA_n 2.0
	e_PpsA_L 1e-79
	e_PpsA_Kpyr 0.00177
	e_PpsA_Kpep 0.001
	e_PykF_kcat 5749.0
	e_PykF_n 4.0
	e_PykF_L 100000.0
	e_PykF_Kpep 5.0
	e_PykF_Kfbp 0.413
	pts_k1 116.0
	pts_km1 46.3
	pts_k4 2520.0
	pts_KEIIA 0.0085
	pts_Kglc 0.0012
	tf_Cra_scale 100.0
	tf_Cra_kfbp 1.36
	tf_Cra_n 2.0
	tf_Crp_scale 100000000.0
	tf_Crp_kcamp 0.895
	tf_Crp_n 1.0
	tf_PdhR_scale 100.0
	tf_PdhR_kpyr 0.164
	tf_PdhR_n 1.0
	g_aceBAK_vcra_unbound 1.9e-09
	g_aceBAK_vcra_bound 2e-06
	g_aceBAK_Kcra 0.00365
	g_aceBAK_aceBfactor 0.3
	g_aceBAK_aceKfactor 0.03
	g_aceBAK_KDNA 2.19
	g_aceBAK_KP 0.897
	g_aceBAK_KPprime 0.00301
	g_aceBAK_KG 0.00488
	g_aceBAK_L 923.0
	g_aceBAK_kcat_iclr 0.00093
	g_aceBAK_DNA 1.0
	g_aceBAK_vcrp_bound 2.3e-10
	g_aceBAK_vcrp_unbound 2e-08
	g_aceBAK_Kcrp 0.341
	g_acs_vcrp_bound 1.2e-06
	g_acs_n 2.31
	g_acs_Kcrp 0.0047
	g_akg2mal_vcrp_bound 1.4e-06
	g_akg2mal_Kcrp 0.091
	g_akg2mal_n 0.74
	g_emp_vcra_unbound 6.2e-07
	g_emp_Kcra 0.09
	g_emp_vcrp_bound 4.7e-07
	g_emp_Kcrp 0.012
	g_eno_vcra_unbound 6.8e-07
	g_eno_Kcra 0.016
	g_fdp_vcra_bound 4.5e-08
	g_fdp_Kcra 0.00118
	g_gltA_vcrp_bound 2.3e-06
	g_gltA_Kcrp 0.04
	g_gltA_n 1.07
	g_icd_vcra_unbound 1.1e-07
	g_icd_vcra_bound 8.5e-07
	g_icd_Kcra 0.00117
	g_mdh_vcrp_bound 9.1e-06
	g_mdh_Kcrp 0.06
	g_pckA_vcra_bound 2.5e-06
	g_pckA_Kcra 0.00535
	g_pdh_vpdhr_unbound 3.6e-07
	g_pdh_vpdhr_bound 1.3e-09
	g_pdh_Kpdhr 0.0034
	g_pfkA_vcra_unbound 8.2e-07
	g_pfkA_vcra_bound 6.6e-09
	g_pfkA_Kcra 6.3e-07
	g_ppsA_vcra_bound 3.3e-06
	g_ppsA_Kcra 0.017
	g_pykF_vcra_unbound 3.9e-07
	g_pykF_vcra_bound 2.1e-09
	g_pykF_Kcra 0.0023
	d_k_degr 2.8e-05
	bm_k_expr 20000.0
	bm_muACT 5.6e-05
	bm_muGLC 0.00018
	bm_GLC_ACoA 1.88
	bm_GLC_AKG 0.978
	bm_GLC_G6P 0.154
	bm_GLC_OAA 6.4
	bm_GLC_PEP 0.423
	bm_GLC_PG3 0.049
	bm_GLC_PYR 0.553
	bm_ACT_ACoA 0.108
	bm_ACT_AKG 0.056
	bm_ACT_G6P 0.076
	bm_ACT_OAA 1.43
	bm_ACT_PEP 0.047
	bm_ACT_PG3 0.066
	bm_ACT_PYR 5.185
	shift1 8.15 #units:hours
	shift2 27.85 #units:hours
	GLC_2 3.0 #units:gram_per_litre
	ACT_1 5.0 #units:gram_per_litre
	ACT_2 3.0 #units:gram_per_litre
	BM_1 0.03
	BM_2 0.0005
	g_acs_vcrp_unbound 0
	g_akg2mal_vcrp_unbound 0
	g_emp_vcra_bound 0
	g_emp_vcrp_unbound 0
	g_eno_vcra_bound 0
	g_fdp_vcra_unbound 0
	g_gltA_vcrp_unbound 0
	g_mdh_vcrp_unbound 0
	g_pckA_vcra_unbound 0
	g_ppsA_vcra_unbound 0
	GLC_1 0
end parameters
begin compartments
	#volume units: volume
	Environment 3 1.0
	Cell 3 1.0
end compartments
begin molecule types
	Cya()
	PdhR()
	Pdh()
	Mdh()
	EIIA_P()
	Emp()
	PckA()
	GLC()
	AceB()
	PpsA()
	Eno()
	Akg2mal()
	Me()
	AKG()
	Icd_P()
	PfkA()
	ACT()
	MAL()
	PYR()
	ACoA()
	AceK()
	FBP()
	GltA()
	EIIA()
	EIICB()
	ICT()
	GLX()
	Fdp()
	BM()
	AceA()
	PG3()
	CrpcAMP()
	cAMP()
	Cra()
	Acoa2act()
	CAMPdegr()
	PEP()
	OAA()
	Ppc()
	Acs()
	G6P()
	CraFBP()
	IclR()
	Crp()
	PdhRPYR()
	PykF()
	Icd()
end molecule types
begin seed species
	@Environment:BM() 0.03 #BM #BM
	@Environment:GLC() 4.8 #GLC #GLC
	@Cell:ACoA() 0.351972298 #ACoA #ACoA
	@Cell:AKG() 0.191190619 #AKG #AKG
	@Cell:cAMP() 0.202804098 #cAMP #cAMP
	@Cell:FBP() 6.57504207 #FBP #FBP
	@Cell:G6P() 1.908140784 #G6P #G6P
	@Cell:GLX() 5.70593e-09 #GLX #GLX
	@Cell:ICT() 0.001408116 #ICT #ICT
	@Cell:MAL() 3.278779135 #MAL #MAL
	@Cell:OAA() 0.050535354 #OAA #OAA
	@Cell:PEP() 0.210455879 #PEP #PEP
	@Cell:PG3() 5.720977255 #PG3 #PG3
	@Cell:PYR() 0.863278018 #PYR #PYR
	@Cell:AceA() 0.00472323 #AceA #AceA
	@Cell:AceB() 0.001416969 #AceB #AceB
	@Cell:AceK() 0.000141697 #AceK #AceK
	@Cell:Acoa2act() 0.001 #Acoa2act #Acoa2act
	@Cell:Acs() 0.001096222 #Acs #Acs
	@Cell:Akg2mal() 0.001026848 #Akg2mal #Akg2mal
	@Cell:CAMPdegr() 0.001 #CAMPdegr #CAMPdegr
	@Cell:Cya() 0.001 #Cya #Cya
	@Cell:Emp() 0.011515593 #Emp #Emp
	@Cell:Eno() 0.011552813 #Eno #Eno
	@Cell:Fdp() 0.000157492 #Fdp #Fdp
	@Cell:GltA() 0.001029612 #GltA #GltA
	@Cell:Icd() 0.004290789 #Icd #Icd
	@Cell:Icd_P() 0.000220477 #Icd_P #Icd_P
	@Cell:Mdh() 0.00345727 #Mdh #Mdh
	@Cell:Me() 0.000999714 #Me #Me
	@Cell:PckA() 0.002290892 #PckA #PckA
	@Cell:Pdh() 0.004647401 #Pdh #Pdh
	@Cell:PfkA() 0.000143816 #PfkA #PfkA
	@Cell:Ppc() 0.000999714 #Ppc #Ppc
	@Cell:PpsA() 0.000987493 #PpsA #PpsA
	@Cell:PykF() 0.005977168 #PykF #PykF
	@Cell:Cra() 0.000299098 #Cra #Cra
	@Cell:CraFBP() 0.006990902 #CraFBP #CraFBP
	@Cell:Crp() 0.005943273 #Crp #Crp
	@Cell:CrpcAMP() 0.001346727 #CrpcAMP #CrpcAMP
	@Cell:IclR() 0.00729 #IclR #IclR
	@Cell:PdhR() 0.001163813 #PdhR #PdhR
	@Cell:PdhRPYR() 0.006126187 #PdhRPYR #PdhRPYR
	@Cell:EIIA() 0.09647707 #EIIA #EIIA
	@Cell:EIIA_P() 0.00352292 #EIIA_P #EIIA_P
	@Cell:EIICB() 0.003 #EIICB #EIICB
end seed species
begin observables
	Species BM_Environment @Environment:BM() #BM
	Species ACT_Environment @Environment:ACT() #ACT
	Species GLC_Environment @Environment:GLC() #GLC
	Species ACoA_Cell @Cell:ACoA() #ACoA
	Species AKG_Cell @Cell:AKG() #AKG
	Species cAMP_Cell @Cell:cAMP() #cAMP
	Species FBP_Cell @Cell:FBP() #FBP
	Species G6P_Cell @Cell:G6P() #G6P
	Species GLX_Cell @Cell:GLX() #GLX
	Species ICT_Cell @Cell:ICT() #ICT
	Species MAL_Cell @Cell:MAL() #MAL
	Species OAA_Cell @Cell:OAA() #OAA
	Species PEP_Cell @Cell:PEP() #PEP
	Species PG3_Cell @Cell:PG3() #PG3
	Species PYR_Cell @Cell:PYR() #PYR
	Species AceA_Cell @Cell:AceA() #AceA
	Species AceB_Cell @Cell:AceB() #AceB
	Species AceK_Cell @Cell:AceK() #AceK
	Species Acoa2act_Cell @Cell:Acoa2act() #Acoa2act
	Species Acs_Cell @Cell:Acs() #Acs
	Species Akg2mal_Cell @Cell:Akg2mal() #Akg2mal
	Species CAMPdegr_Cell @Cell:CAMPdegr() #CAMPdegr
	Species Cya_Cell @Cell:Cya() #Cya
	Species Emp_Cell @Cell:Emp() #Emp
	Species Eno_Cell @Cell:Eno() #Eno
	Species Fdp_Cell @Cell:Fdp() #Fdp
	Species GltA_Cell @Cell:GltA() #GltA
	Species Icd_Cell @Cell:Icd() #Icd
	Species Icd_P_Cell @Cell:Icd_P() #Icd_P
	Species Mdh_Cell @Cell:Mdh() #Mdh
	Species Me_Cell @Cell:Me() #Me
	Species PckA_Cell @Cell:PckA() #PckA
	Species Pdh_Cell @Cell:Pdh() #Pdh
	Species PfkA_Cell @Cell:PfkA() #PfkA
	Species Ppc_Cell @Cell:Ppc() #Ppc
	Species PpsA_Cell @Cell:PpsA() #PpsA
	Species PykF_Cell @Cell:PykF() #PykF
	Species Cra_Cell @Cell:Cra() #Cra
	Species CraFBP_Cell @Cell:CraFBP() #CraFBP
	Species Crp_Cell @Cell:Crp() #Crp
	Species CrpcAMP_Cell @Cell:CrpcAMP() #CrpcAMP
	Species IclR_Cell @Cell:IclR() #IclR
	Species PdhR_Cell @Cell:PdhR() #PdhR
	Species PdhRPYR_Cell @Cell:PdhRPYR() #PdhRPYR
	Species EIIA_Cell @Cell:EIIA() #EIIA
	Species EIIA_P_Cell @Cell:EIIA_P() #EIIA_P
	Species EIICB_Cell @Cell:EIICB() #EIICB
end observables
begin functions
	alphaACT() = ACT_Environment*(-GLC_Environment/(GLC_Environment + pts_Kglc) + 1)/(ACT_Environment + e_Acs_Kact)
	alphaGLC() = GLC_Environment/(GLC_Environment + pts_Kglc)
	SS_Ppc() = 0.000279893*alphaACT + 0.000999714*alphaGLC
	SS_Me() = 0.003399346*alphaACT + 0.000999714*alphaGLC
	k_bm_PYR() = alphaACT*bm_ACT_PYR + alphaGLC*bm_GLC_PYR
	k_bm_PG3() = alphaACT*bm_ACT_PG3 + alphaGLC*bm_GLC_PG3
	k_bm_PEP() = alphaACT*bm_ACT_PEP + alphaGLC*bm_GLC_PEP
	k_bm_OAA() = alphaACT*bm_ACT_OAA + alphaGLC*bm_GLC_OAA
	k_bm_G6P() = alphaACT*bm_ACT_G6P + alphaGLC*bm_GLC_G6P
	k_bm_AKG() = alphaACT*bm_ACT_AKG + alphaGLC*bm_GLC_AKG
	k_bm_ACoA() = alphaACT*bm_ACT_ACoA + alphaGLC*bm_GLC_ACoA
	mu() = alphaACT*bm_muACT + alphaGLC*bm_muGLC
	fRate8() = EIICB_Cell*GLC_Environment*pts_k4/(EIIA_P_Cell*GLC_Environment + EIIA_P_Cell*pts_Kglc + GLC_Environment*pts_KEIIA + pts_KEIIA*pts_Kglc)
	fRate9() = AceK_Cell*e_AceK_kcat_ki*(Icd_Cell/e_AceK_Kicd + 1.0)^e_AceK_n/(Icd_Cell*e_AceK_L*(AKG_Cell/e_AceK_Kakg + GLX_Cell/e_AceK_Kglx + ICT_Cell/e_AceK_Kict + OAA_Cell/e_AceK_Koaa + PEP_Cell/e_AceK_Kpep + PG3_Cell/e_AceK_Kpg3 + PYR_Cell/e_AceK_Kpyr + 1.0)^e_AceK_n + Icd_Cell*(Icd_Cell/e_AceK_Kicd + 1.0)^e_AceK_n + e_AceK_Kicd*e_AceK_L*(AKG_Cell/e_AceK_Kakg + GLX_Cell/e_AceK_Kglx + ICT_Cell/e_AceK_Kict + OAA_Cell/e_AceK_Koaa + PEP_Cell/e_AceK_Kpep + PG3_Cell/e_AceK_Kpg3 + PYR_Cell/e_AceK_Kpyr + 1.0)^e_AceK_n + e_AceK_Kicd*(Icd_Cell/e_AceK_Kicd + 1.0)^e_AceK_n)
	fRate10() = AceK_Cell*e_AceK_kcat_ph*(Icd_P_Cell/e_AceK_Kicd_P + 1.0)^e_AceK_n*(AKG_Cell/e_AceK_Kakg + OAA_Cell/e_AceK_Koaa + PEP_Cell/e_AceK_Kpep + PG3_Cell/e_AceK_Kpg3 + PYR_Cell/e_AceK_Kpyr + 1.0)^e_AceK_n/(Icd_P_Cell*e_AceK_L + Icd_P_Cell*(Icd_P_Cell/e_AceK_Kicd_P + 1.0)^e_AceK_n*(AKG_Cell/e_AceK_Kakg + OAA_Cell/e_AceK_Koaa + PEP_Cell/e_AceK_Kpep + PG3_Cell/e_AceK_Kpg3 + PYR_Cell/e_AceK_Kpyr + 1.0)^e_AceK_n + e_AceK_Kicd_P*e_AceK_L + e_AceK_Kicd_P*(Icd_P_Cell/e_AceK_Kicd_P + 1.0)^e_AceK_n*(AKG_Cell/e_AceK_Kakg + OAA_Cell/e_AceK_Koaa + PEP_Cell/e_AceK_Kpep + PG3_Cell/e_AceK_Kpg3 + PYR_Cell/e_AceK_Kpyr + 1.0)^e_AceK_n)
	fRate11() = tf_Cra_scale*(-CraFBP_Cell + FBP_Cell^tf_Cra_n*(CraFBP_Cell + Cra_Cell)/(FBP_Cell^tf_Cra_n + tf_Cra_kfbp^tf_Cra_n))
	fRate12() = tf_Crp_scale*(-CrpcAMP_Cell + cAMP_Cell^tf_Crp_n*(Crp_Cell + CrpcAMP_Cell)/(cAMP_Cell^tf_Crp_n + tf_Crp_kcamp^tf_Crp_n))
	fRate13() = tf_PdhR_scale*(PYR_Cell^tf_PdhR_n*(PdhRPYR_Cell + PdhR_Cell)/(PYR_Cell^tf_PdhR_n + tf_PdhR_kpyr^tf_PdhR_n) - PdhRPYR_Cell)
	fRate14() = AceA_Cell*e_AceA_kcat*(ICT_Cell/e_AceA_Kict + 1.0)^e_AceA_n/(ICT_Cell*e_AceA_L*(AKG_Cell/e_AceA_Kakg + PEP_Cell/e_AceA_Kpep + PG3_Cell/e_AceA_Kpg3 + 1.0)^e_AceA_n + ICT_Cell*(ICT_Cell/e_AceA_Kict + 1.0)^e_AceA_n + e_AceA_Kict*e_AceA_L*(AKG_Cell/e_AceA_Kakg + PEP_Cell/e_AceA_Kpep + PG3_Cell/e_AceA_Kpg3 + 1.0)^e_AceA_n + e_AceA_Kict*(ICT_Cell/e_AceA_Kict + 1.0)^e_AceA_n)
	fRate15() = AceB_Cell*e_AceB_kcat/(ACoA_Cell*GLX_Cell + ACoA_Cell*e_AceB_Kglx + GLX_Cell*e_AceB_Kacoa + e_AceB_Kacoa*e_AceB_Kglxacoa)
	fRate16() = Acoa2act_Cell*e_Acoa2act_kcat*((ACoA_Cell + 1.0*e_Acoa2act_Kacoa)/e_Acoa2act_Kacoa)^e_Acoa2act_n*((PYR_Cell + 1.0*e_Acoa2act_Kpyr)/e_Acoa2act_Kpyr)^e_Acoa2act_n/(ACoA_Cell*e_Acoa2act_L + e_Acoa2act_Kacoa*e_Acoa2act_L + ((ACoA_Cell + 1.0*e_Acoa2act_Kacoa)/e_Acoa2act_Kacoa)^e_Acoa2act_n*((PYR_Cell + 1.0*e_Acoa2act_Kpyr)/e_Acoa2act_Kpyr)^e_Acoa2act_n*(ACoA_Cell + e_Acoa2act_Kacoa))
	fRate17() = ACT_Environment*Acs_Cell*e_Acs_kcat/(ACT_Environment + e_Acs_Kact)
	fRate18() = Akg2mal_Cell*e_Akg2mal_kcat/(AKG_Cell + e_Akg2mal_Kakg)
	fRate19() = CAMPdegr_Cell*e_CAMPdegr_kcat/(cAMP_Cell + e_CAMPdegr_KcAMP)
	fRate20() = Cya_Cell*EIIA_P_Cell*e_Cya_kcat/(EIIA_P_Cell + e_Cya_KEIIA)
	fRate21() = (Emp_Cell*FBP_Cell*e_Emp_kcat_f/e_Emp_Kfbp - Emp_Cell*PG3_Cell*e_Emp_kcat_r/e_Emp_Kpg3)/(FBP_Cell/e_Emp_Kfbp + PG3_Cell/e_Emp_Kpg3 + 1)
	fRate22() = Eno_Cell*e_Eno_Kpep*e_Eno_kcatf/(PEP_Cell*e_Eno_Kpg3 + e_Eno_Kpep*(PG3_Cell + e_Eno_Kpg3))
	fRate22m() = Eno_Cell*e_Eno_Kpg3*e_Eno_kcatr/(PG3_Cell*e_Eno_Kpep + e_Eno_Kpg3*(PEP_Cell + e_Eno_Kpep))
	fRate23() = Fdp_Cell*e_Fdp_kcat*((FBP_Cell + 1.0*e_Fdp_Kfbp)/e_Fdp_Kfbp)^e_Fdp_n*((PEP_Cell + 1.0*e_Fdp_Kpep)/e_Fdp_Kpep)^e_Fdp_n/(FBP_Cell*e_Fdp_L + e_Fdp_Kfbp*e_Fdp_L + ((FBP_Cell + 1.0*e_Fdp_Kfbp)/e_Fdp_Kfbp)^e_Fdp_n*((PEP_Cell + 1.0*e_Fdp_Kpep)/e_Fdp_Kpep)^e_Fdp_n*(FBP_Cell + e_Fdp_Kfbp))
	fRate24() = GltA_Cell*e_GltA_Kakg*e_GltA_kcat/(ACoA_Cell*AKG_Cell*e_GltA_Koaa + AKG_Cell*e_GltA_Kacoa*e_GltA_Koaaacoa + e_GltA_Kakg*(ACoA_Cell*OAA_Cell + ACoA_Cell*e_GltA_Koaa + OAA_Cell*e_GltA_Kacoa + e_GltA_Kacoa*e_GltA_Koaaacoa))
	fRate25() = Icd_Cell*e_Icd_kcat*(ICT_Cell/e_Icd_Kict + 1.0)^e_Icd_n/(ICT_Cell*e_Icd_L*(PEP_Cell/e_Icd_Kpep + 1.0)^e_Icd_n + ICT_Cell*(ICT_Cell/e_Icd_Kict + 1.0)^e_Icd_n + e_Icd_Kict*e_Icd_L*(PEP_Cell/e_Icd_Kpep + 1.0)^e_Icd_n + e_Icd_Kict*(ICT_Cell/e_Icd_Kict + 1.0)^e_Icd_n)
	fRate26() = MAL_Cell^e_Mdh_n*Mdh_Cell*e_Mdh_kcat/(MAL_Cell^e_Mdh_n + e_Mdh_Kmal^e_Mdh_n)
	fRate27() = Me_Cell*e_Me_kcat*(MAL_Cell/e_Me_Kmal + 1.0)^e_Me_n/(MAL_Cell*e_Me_L*(ACoA_Cell/e_Me_Kacoa + cAMP_Cell/e_Me_Kcamp + 1.0)^e_Me_n + MAL_Cell*(MAL_Cell/e_Me_Kmal + 1.0)^e_Me_n + e_Me_Kmal*e_Me_L*(ACoA_Cell/e_Me_Kacoa + cAMP_Cell/e_Me_Kcamp + 1.0)^e_Me_n + e_Me_Kmal*(MAL_Cell/e_Me_Kmal + 1.0)^e_Me_n)
	fRate28() = PckA_Cell*e_PckA_Kpep*e_PckA_kcat/(PEP_Cell*e_PckA_Koaa + e_PckA_Kpep*(OAA_Cell + e_PckA_Koaa))
	fRate29() = Pdh_Cell*e_Pdh_kcat*(PYR_Cell/e_Pdh_Kpyr + 1.0)^e_Pdh_n/(PYR_Cell*e_Pdh_L*(GLX_Cell/e_Pdh_Kglx + PYR_Cell/e_Pdh_KpyrI + 1.0)^e_Pdh_n + PYR_Cell*(PYR_Cell/e_Pdh_Kpyr + 1.0)^e_Pdh_n + e_Pdh_Kpyr*e_Pdh_L*(GLX_Cell/e_Pdh_Kglx + PYR_Cell/e_Pdh_KpyrI + 1.0)^e_Pdh_n + e_Pdh_Kpyr*(PYR_Cell/e_Pdh_Kpyr + 1.0)^e_Pdh_n)
	fRate30() = PfkA_Cell*e_PfkA_kcat*(G6P_Cell/e_PfkA_Kg6p + 1.0)^e_PfkA_n/(G6P_Cell*e_PfkA_L*(PEP_Cell/e_PfkA_Kpep + 1.0)^e_PfkA_n + G6P_Cell*(G6P_Cell/e_PfkA_Kg6p + 1.0)^e_PfkA_n + e_PfkA_Kg6p*e_PfkA_L*(PEP_Cell/e_PfkA_Kpep + 1.0)^e_PfkA_n + e_PfkA_Kg6p*(G6P_Cell/e_PfkA_Kg6p + 1.0)^e_PfkA_n)
	fRate31() = Ppc_Cell*e_Ppc_kcat*((FBP_Cell + 1.0*e_Ppc_Kfbp)/e_Ppc_Kfbp)^e_Ppc_n*((PEP_Cell + 1.0*e_Ppc_Kpep)/e_Ppc_Kpep)^e_Ppc_n/(PEP_Cell*e_Ppc_L + e_Ppc_Kpep*e_Ppc_L + ((FBP_Cell + 1.0*e_Ppc_Kfbp)/e_Ppc_Kfbp)^e_Ppc_n*((PEP_Cell + 1.0*e_Ppc_Kpep)/e_Ppc_Kpep)^e_Ppc_n*(PEP_Cell + e_Ppc_Kpep))
	fRate32() = PpsA_Cell*e_PpsA_kcat*(PYR_Cell/e_PpsA_Kpyr + 1.0)^e_PpsA_n/(PYR_Cell*e_PpsA_L*(PEP_Cell/e_PpsA_Kpep + 1.0)^e_PpsA_n + PYR_Cell*(PYR_Cell/e_PpsA_Kpyr + 1.0)^e_PpsA_n + e_PpsA_Kpyr*e_PpsA_L*(PEP_Cell/e_PpsA_Kpep + 1.0)^e_PpsA_n + e_PpsA_Kpyr*(PYR_Cell/e_PpsA_Kpyr + 1.0)^e_PpsA_n)
	fRate33() = PykF_Cell*e_PykF_kcat*((FBP_Cell + 1.0*e_PykF_Kfbp)/e_PykF_Kfbp)^e_PykF_n*((PEP_Cell + 1.0*e_PykF_Kpep)/e_PykF_Kpep)^e_PykF_n/(PEP_Cell*e_PykF_L + e_PykF_Kpep*e_PykF_L + ((FBP_Cell + 1.0*e_PykF_Kfbp)/e_PykF_Kfbp)^e_PykF_n*((PEP_Cell + 1.0*e_PykF_Kpep)/e_PykF_Kpep)^e_PykF_n*(PEP_Cell + e_PykF_Kpep))
	fRate34() = bm_k_expr*mu*(Cra_Cell*g_aceBAK_vcra_bound/(Cra_Cell + g_aceBAK_Kcra) + CrpcAMP_Cell*g_aceBAK_vcrp_bound/(CrpcAMP_Cell + g_aceBAK_Kcrp) + IclR_Cell*g_aceBAK_kcat_iclr*(-g_aceBAK_DNA*(PYR_Cell/g_aceBAK_KPprime + 1)/(g_aceBAK_KDNA*(GLX_Cell*(GLX_Cell/g_aceBAK_KG + 1)/(g_aceBAK_KG*g_aceBAK_L) + PYR_Cell*g_aceBAK_DNA/(g_aceBAK_KDNA*g_aceBAK_KPprime) + PYR_Cell/g_aceBAK_KP + g_aceBAK_DNA/g_aceBAK_KDNA + 1)) + 1) + g_aceBAK_vcra_unbound*(-Cra_Cell/(Cra_Cell + g_aceBAK_Kcra) + 1) + g_aceBAK_vcrp_unbound*(-CrpcAMP_Cell/(CrpcAMP_Cell + g_aceBAK_Kcrp) + 1))
	fRate35() = bm_k_expr*g_aceBAK_aceBfactor*mu*(Cra_Cell*g_aceBAK_vcra_bound/(Cra_Cell + g_aceBAK_Kcra) + CrpcAMP_Cell*g_aceBAK_vcrp_bound/(CrpcAMP_Cell + g_aceBAK_Kcrp) + IclR_Cell*g_aceBAK_kcat_iclr*(-g_aceBAK_DNA*(PYR_Cell/g_aceBAK_KPprime + 1)/(g_aceBAK_KDNA*(GLX_Cell*(GLX_Cell/g_aceBAK_KG + 1)/(g_aceBAK_KG*g_aceBAK_L) + PYR_Cell*g_aceBAK_DNA/(g_aceBAK_KDNA*g_aceBAK_KPprime) + PYR_Cell/g_aceBAK_KP + g_aceBAK_DNA/g_aceBAK_KDNA + 1)) + 1) + g_aceBAK_vcra_unbound*(-Cra_Cell/(Cra_Cell + g_aceBAK_Kcra) + 1) + g_aceBAK_vcrp_unbound*(-CrpcAMP_Cell/(CrpcAMP_Cell + g_aceBAK_Kcrp) + 1))
	fRate36() = bm_k_expr*g_aceBAK_aceKfactor*mu*(Cra_Cell*g_aceBAK_vcra_bound/(Cra_Cell + g_aceBAK_Kcra) + CrpcAMP_Cell*g_aceBAK_vcrp_bound/(CrpcAMP_Cell + g_aceBAK_Kcrp) + IclR_Cell*g_aceBAK_kcat_iclr*(-g_aceBAK_DNA*(PYR_Cell/g_aceBAK_KPprime + 1)/(g_aceBAK_KDNA*(GLX_Cell*(GLX_Cell/g_aceBAK_KG + 1)/(g_aceBAK_KG*g_aceBAK_L) + PYR_Cell*g_aceBAK_DNA/(g_aceBAK_KDNA*g_aceBAK_KPprime) + PYR_Cell/g_aceBAK_KP + g_aceBAK_DNA/g_aceBAK_KDNA + 1)) + 1) + g_aceBAK_vcra_unbound*(-Cra_Cell/(Cra_Cell + g_aceBAK_Kcra) + 1) + g_aceBAK_vcrp_unbound*(-CrpcAMP_Cell/(CrpcAMP_Cell + g_aceBAK_Kcrp) + 1))
	fRate38() = bm_k_expr*mu*(CrpcAMP_Cell^g_acs_n*g_acs_vcrp_bound/(CrpcAMP_Cell^g_acs_n + g_acs_Kcrp^g_acs_n) + g_acs_vcrp_unbound*(-CrpcAMP_Cell^g_acs_n/(CrpcAMP_Cell^g_acs_n + g_acs_Kcrp^g_acs_n) + 1))
	fRate39() = bm_k_expr*mu*(CrpcAMP_Cell^g_akg2mal_n*g_akg2mal_vcrp_bound/(CrpcAMP_Cell^g_akg2mal_n + g_akg2mal_Kcrp^g_akg2mal_n) + g_akg2mal_vcrp_unbound*(-CrpcAMP_Cell^g_akg2mal_n/(CrpcAMP_Cell^g_akg2mal_n + g_akg2mal_Kcrp^g_akg2mal_n) + 1))
	fRate44() = bm_k_expr*mu*(Cra_Cell*g_emp_vcra_bound/(Cra_Cell + g_emp_Kcra) + CrpcAMP_Cell*g_emp_vcrp_bound/(CrpcAMP_Cell + g_emp_Kcrp) + g_emp_vcra_unbound*(-Cra_Cell/(Cra_Cell + g_emp_Kcra) + 1) + g_emp_vcrp_unbound*(-CrpcAMP_Cell/(CrpcAMP_Cell + g_emp_Kcrp) + 1))
	fRate45() = bm_k_expr*mu*(Cra_Cell*g_eno_vcra_bound/(Cra_Cell + g_eno_Kcra) + g_eno_vcra_unbound*(-Cra_Cell/(Cra_Cell + g_eno_Kcra) + 1))
	fRate46() = bm_k_expr*mu*(Cra_Cell*g_fdp_vcra_bound/(Cra_Cell + g_fdp_Kcra) + g_fdp_vcra_unbound*(-Cra_Cell/(Cra_Cell + g_fdp_Kcra) + 1))
	fRate47() = bm_k_expr*mu*(CrpcAMP_Cell^g_gltA_n*g_gltA_vcrp_bound/(CrpcAMP_Cell^g_gltA_n + g_gltA_Kcrp^g_gltA_n) + g_gltA_vcrp_unbound*(-CrpcAMP_Cell^g_gltA_n/(CrpcAMP_Cell^g_gltA_n + g_gltA_Kcrp^g_gltA_n) + 1))
	fRate48() = bm_k_expr*mu*(Cra_Cell*g_icd_vcra_bound/(Cra_Cell + g_icd_Kcra) + g_icd_vcra_unbound*(-Cra_Cell/(Cra_Cell + g_icd_Kcra) + 1))
	fRate50() = bm_k_expr*mu*(CrpcAMP_Cell*g_mdh_vcrp_bound/(CrpcAMP_Cell + g_mdh_Kcrp) + g_mdh_vcrp_unbound*(-CrpcAMP_Cell/(CrpcAMP_Cell + g_mdh_Kcrp) + 1))
	fRate51() = SS_Me*(d_k_degr + mu)
	fRate52() = bm_k_expr*mu*(Cra_Cell*g_pckA_vcra_bound/(Cra_Cell + g_pckA_Kcra) + g_pckA_vcra_unbound*(-Cra_Cell/(Cra_Cell + g_pckA_Kcra) + 1))
	fRate53() = bm_k_expr*mu*(PdhR_Cell*g_pdh_vpdhr_bound/(PdhR_Cell + g_pdh_Kpdhr) + g_pdh_vpdhr_unbound*(-PdhR_Cell/(PdhR_Cell + g_pdh_Kpdhr) + 1))
	fRate55() = bm_k_expr*mu*(Cra_Cell*g_pfkA_vcra_bound/(Cra_Cell + g_pfkA_Kcra) + g_pfkA_vcra_unbound*(-Cra_Cell/(Cra_Cell + g_pfkA_Kcra) + 1))
	fRate56() = SS_Ppc*(d_k_degr + mu)
	fRate57() = bm_k_expr*mu*(Cra_Cell*g_ppsA_vcra_bound/(Cra_Cell + g_ppsA_Kcra) + g_ppsA_vcra_unbound*(-Cra_Cell/(Cra_Cell + g_ppsA_Kcra) + 1))
	fRate58() = bm_k_expr*mu*(Cra_Cell*g_pykF_vcra_bound/(Cra_Cell + g_pykF_Kcra) + g_pykF_vcra_unbound*(-Cra_Cell/(Cra_Cell + g_pykF_Kcra) + 1))
	fRate61() = AceA_Cell*(d_k_degr + mu)
	fRate62() = AceB_Cell*(d_k_degr + mu)
	fRate63() = AceK_Cell*(d_k_degr + mu)
	fRate65() = Acs_Cell*(d_k_degr + mu)
	fRate66() = Akg2mal_Cell*(d_k_degr + mu)
	fRate73() = Emp_Cell*(d_k_degr + mu)
	fRate74() = Eno_Cell*(d_k_degr + mu)
	fRate75() = Fdp_Cell*(d_k_degr + mu)
	fRate76() = GltA_Cell*(d_k_degr + mu)
	fRate77() = Icd_Cell*(d_k_degr + mu)
	fRate78() = Icd_P_Cell*(d_k_degr + mu)
	fRate80() = Mdh_Cell*(d_k_degr + mu)
	fRate81() = Me_Cell*(d_k_degr + mu)
	fRate82() = PckA_Cell*(d_k_degr + mu)
	fRate83() = Pdh_Cell*(d_k_degr + mu)
	fRate86() = PfkA_Cell*(d_k_degr + mu)
	fRate87() = Ppc_Cell*(d_k_degr + mu)
	fRate88() = PpsA_Cell*(d_k_degr + mu)
	fRate89() = PykF_Cell*(d_k_degr + mu)
	fRate105() = BM_Environment*mu
	fRate106() = BM_Environment*EIIA_P_Cell*EIICB_Cell*env_M_GLC*env_uc*pts_k4/(EIIA_P_Cell*GLC_Environment + EIIA_P_Cell*pts_Kglc + GLC_Environment*pts_KEIIA + pts_KEIIA*pts_Kglc)
	fRate107() = Acs_Cell*BM_Environment*e_Acs_kcat*env_M_ACT*env_uc/(ACT_Environment + e_Acs_Kact)
	fRate108() = ACoA_Cell*Acoa2act_Cell*BM_Environment*e_Acoa2act_kcat*env_M_ACT*env_uc*((ACoA_Cell + 1.0*e_Acoa2act_Kacoa)/e_Acoa2act_Kacoa)^e_Acoa2act_n*((PYR_Cell + 1.0*e_Acoa2act_Kpyr)/e_Acoa2act_Kpyr)^e_Acoa2act_n/(ACoA_Cell*e_Acoa2act_L + e_Acoa2act_Kacoa*e_Acoa2act_L + ((ACoA_Cell + 1.0*e_Acoa2act_Kacoa)/e_Acoa2act_Kacoa)^e_Acoa2act_n*((PYR_Cell + 1.0*e_Acoa2act_Kpyr)/e_Acoa2act_Kpyr)^e_Acoa2act_n*(ACoA_Cell + e_Acoa2act_Kacoa))
end functions
begin reaction rules
	bm_ACoA: ACoA()@Cell -> 0  k_bm_ACoA #Modifiers(ACT, GLC)
	bm_AKG: AKG()@Cell -> 0  k_bm_AKG #Modifiers(ACT, GLC)
	bm_G6P: G6P()@Cell -> 0  k_bm_G6P #Modifiers(ACT, GLC)
	bm_OAA: OAA()@Cell -> 0  k_bm_OAA #Modifiers(ACT, GLC)
	bm_PEP: PEP()@Cell -> 0  k_bm_PEP #Modifiers(ACT, GLC)
	bm_PG3: PG3()@Cell -> 0  k_bm_PG3 #Modifiers(ACT, GLC)
	bm_PYR: PYR()@Cell -> 0  k_bm_PYR #Modifiers(ACT, GLC)
	pts_r1: PEP()@Cell + EIIA()@Cell <-> PYR()@Cell + EIIA_P()@Cell pts_k1,pts_km1
	pts_r4: EIIA_P()@Cell -> G6P()@Cell + EIIA()@Cell fRate8() #Modifiers(EIICB, GLC)
	e_AceK_Ki: Icd()@Cell -> Icd_P()@Cell fRate9() #Modifiers(AKG, AceK, GLX, ICT, OAA, PEP, PG3, PYR)
	e_AceK_Ph: Icd_P()@Cell -> Icd()@Cell fRate10() #Modifiers(AKG, AceK, OAA, PEP, PG3, PYR)
	tf_Cra_reactants_0: 0  -> Cra()@Cell -1*(fRate11()) #Modifiers(FBP)
	tf_Cra_products_0: 0  -> CraFBP()@Cell fRate11() #Modifiers(FBP)
	tf_Crp_reactants_0: 0  -> Crp()@Cell -1*(fRate12()) #Modifiers(cAMP)
	tf_Crp_products_0: 0  -> CrpcAMP()@Cell fRate12() #Modifiers(cAMP)
	tf_PdhR_reactants_0: 0  -> PdhR()@Cell -1*(fRate13()) #Modifiers(PYR)
	tf_PdhR_products_0: 0  -> PdhRPYR()@Cell fRate13() #Modifiers(PYR)
	e_AceA: ICT()@Cell -> AKG()@Cell + GLX()@Cell fRate14() #Modifiers(AceA, PEP, PG3)
	e_AceB: ACoA()@Cell + GLX()@Cell -> MAL()@Cell fRate15() #Modifiers(AceB)
	e_Acoa2act: ACoA()@Cell -> 0  fRate16() #Modifiers(Acoa2act, PYR)
	e_Acs: 0  -> ACoA()@Cell fRate17() #Modifiers(ACT, Acs)
	e_Akg2mal: AKG()@Cell -> MAL()@Cell fRate18() #Modifiers(Akg2mal)
	e_CAMPdegr: cAMP()@Cell -> 0  fRate19() #Modifiers(CAMPdegr)
	e_Cya: 0  -> cAMP()@Cell fRate20() #Modifiers(Cya, EIIA_P)
	e_Emp_reactants_0: 0  -> FBP()@Cell -1*0.5*(fRate21()) #Modifiers(Emp)
	e_Emp_products_0: 0  -> PG3()@Cell fRate21() #Modifiers(Emp)
	e_Eno: PG3()@Cell <-> PEP()@Cell fRate22(),fRate22m() #Modifiers(Eno)
	e_Fdp: FBP()@Cell -> G6P()@Cell fRate23() #Modifiers(Fdp, PEP)
	e_GltA: ACoA()@Cell + OAA()@Cell -> ICT()@Cell fRate24() #Modifiers(AKG, GltA)
	e_Icd: ICT()@Cell -> AKG()@Cell fRate25() #Modifiers(Icd, PEP)
	e_Mdh_reactants_0: 0  -> MAL()@Cell -1*(fRate26()) #Modifiers(Mdh)
	e_Mdh_products_0: 0  -> OAA()@Cell fRate26() #Modifiers(Mdh)
	e_Me: MAL()@Cell -> PYR()@Cell fRate27() #Modifiers(ACoA, Me, cAMP)
	e_PckA: OAA()@Cell -> PEP()@Cell fRate28() #Modifiers(PckA)
	e_Pdh: PYR()@Cell -> ACoA()@Cell fRate29() #Modifiers(GLX, Pdh)
	e_PfkA: G6P()@Cell -> FBP()@Cell fRate30() #Modifiers(PEP, PfkA)
	e_Ppc: PEP()@Cell -> OAA()@Cell fRate31() #Modifiers(FBP, Ppc)
	e_PpsA: PYR()@Cell -> PEP()@Cell fRate32() #Modifiers(PpsA)
	e_PykF: PEP()@Cell -> PYR()@Cell fRate33() #Modifiers(FBP, PykF)
	g_aceA_products_0: 0  -> AceA()@Cell fRate34() #Modifiers(ACT, Cra, CrpcAMP, GLC, GLX, IclR, PYR)
	g_aceB_products_0: 0  -> AceB()@Cell fRate35() #Modifiers(ACT, Cra, CrpcAMP, GLC, GLX, IclR, PYR)
	g_aceK_products_0: 0  -> AceK()@Cell fRate36() #Modifiers(ACT, Cra, CrpcAMP, GLC, GLX, IclR, PYR)
	g_acoa2act: 0  -> Acoa2act()@Cell 0
	g_acs_products_0: 0  -> Acs()@Cell fRate38() #Modifiers(ACT, CrpcAMP, GLC)
	g_akg2mal_products_0: 0  -> Akg2mal()@Cell fRate39() #Modifiers(ACT, CrpcAMP, GLC)
	g_cAMPdegr: 0  -> CAMPdegr()@Cell 0
	g_cra: 0  -> Cra()@Cell 0
	g_crp: 0  -> Crp()@Cell 0
	g_cya: 0  -> Cya()@Cell 0
	g_emp_products_0: 0  -> Emp()@Cell fRate44() #Modifiers(ACT, Cra, CrpcAMP, GLC)
	g_eno_products_0: 0  -> Eno()@Cell fRate45() #Modifiers(ACT, Cra, GLC)
	g_fdp_products_0: 0  -> Fdp()@Cell fRate46() #Modifiers(ACT, Cra, GLC)
	g_gltA_products_0: 0  -> GltA()@Cell fRate47() #Modifiers(ACT, CrpcAMP, GLC)
	g_icd_products_0: 0  -> Icd()@Cell fRate48() #Modifiers(ACT, Cra, GLC)
	g_iclr: 0  -> IclR()@Cell 0
	g_mdh_products_0: 0  -> Mdh()@Cell fRate50() #Modifiers(ACT, CrpcAMP, GLC)
	g_me: 0  -> Me()@Cell fRate51() #Modifiers(ACT, GLC)
	g_pckA_products_0: 0  -> PckA()@Cell fRate52() #Modifiers(ACT, Cra, GLC)
	g_pdh_products_0: 0  -> Pdh()@Cell fRate53() #Modifiers(ACT, GLC, PdhR)
	g_pdhr: 0  -> PdhR()@Cell 0
	g_pfkA_products_0: 0  -> PfkA()@Cell fRate55() #Modifiers(ACT, Cra, GLC)
	g_ppc: 0  -> Ppc()@Cell fRate56() #Modifiers(ACT, GLC)
	g_ppsA_products_0: 0  -> PpsA()@Cell fRate57() #Modifiers(ACT, Cra, GLC)
	g_pykF_products_0: 0  -> PykF()@Cell fRate58() #Modifiers(ACT, Cra, GLC)
	g_EIIA: 0  -> EIIA()@Cell 0
	g_EIICB: 0  -> EIICB()@Cell 0
	d_AceA_reactants_0: 0  -> AceA()@Cell -1*(fRate61()) #Modifiers(ACT, GLC)
	d_AceB_reactants_0: 0  -> AceB()@Cell -1*(fRate62()) #Modifiers(ACT, GLC)
	d_AceK_reactants_0: 0  -> AceK()@Cell -1*(fRate63()) #Modifiers(ACT, GLC)
	d_Acoa2act: Acoa2act()@Cell -> 0  0
	d_Acs_reactants_0: 0  -> Acs()@Cell -1*(fRate65()) #Modifiers(ACT, GLC)
	d_Akg2mal_reactants_0: 0  -> Akg2mal()@Cell -1*(fRate66()) #Modifiers(ACT, GLC)
	d_CAMPdegr: CAMPdegr()@Cell -> 0  0
	d_Cra: Cra()@Cell -> 0  0
	d_CraFBP: CraFBP()@Cell -> 0  0
	d_Crp: Crp()@Cell -> 0  0
	d_CrpcAMP: CrpcAMP()@Cell -> 0  0
	d_Cya: Cya()@Cell -> 0  0
	d_Emp_reactants_0: 0  -> Emp()@Cell -1*(fRate73()) #Modifiers(ACT, GLC)
	d_Eno_reactants_0: 0  -> Eno()@Cell -1*(fRate74()) #Modifiers(ACT, GLC)
	d_Fdp_reactants_0: 0  -> Fdp()@Cell -1*(fRate75()) #Modifiers(ACT, GLC)
	d_GltA_reactants_0: 0  -> GltA()@Cell -1*(fRate76()) #Modifiers(ACT, GLC)
	d_Icd_reactants_0: 0  -> Icd()@Cell -1*(fRate77()) #Modifiers(ACT, GLC)
	d_Icd_P_reactants_0: 0  -> Icd_P()@Cell -1*(fRate78()) #Modifiers(ACT, GLC)
	d_IclR: IclR()@Cell -> 0  0
	d_Mdh_reactants_0: 0  -> Mdh()@Cell -1*(fRate80()) #Modifiers(ACT, GLC)
	d_Me_reactants_0: 0  -> Me()@Cell -1*(fRate81()) #Modifiers(ACT, GLC)
	d_PckA_reactants_0: 0  -> PckA()@Cell -1*(fRate82()) #Modifiers(ACT, GLC)
	d_Pdh_reactants_0: 0  -> Pdh()@Cell -1*(fRate83()) #Modifiers(ACT, GLC)
	d_PdhR: PdhR()@Cell -> 0  0
	d_PdhRPYR: PdhRPYR()@Cell -> 0  0
	d_PfkA_reactants_0: 0  -> PfkA()@Cell -1*(fRate86()) #Modifiers(ACT, GLC)
	d_Ppc_reactants_0: 0  -> Ppc()@Cell -1*(fRate87()) #Modifiers(ACT, GLC)
	d_PpsA_reactants_0: 0  -> PpsA()@Cell -1*(fRate88()) #Modifiers(ACT, GLC)
	d_PykF_reactants_0: 0  -> PykF()@Cell -1*(fRate89()) #Modifiers(ACT, GLC)
	d_EIIA: EIIA()@Cell -> 0  0
	d_EIIA_P: EIIA_P()@Cell -> 0  0
	d_EIICB: EIICB()@Cell -> 0  0
	d_ACoA: ACoA()@Cell -> 0  mu #Modifiers(ACT, GLC)
	d_AKG: AKG()@Cell -> 0  mu #Modifiers(ACT, GLC)
	d_cAMP: cAMP()@Cell -> 0  mu #Modifiers(ACT, GLC)
	d_FBP: FBP()@Cell -> 0  mu #Modifiers(ACT, GLC)
	d_G6P: G6P()@Cell -> 0  mu #Modifiers(ACT, GLC)
	d_GLX: GLX()@Cell -> 0  mu #Modifiers(ACT, GLC)
	d_ICT: ICT()@Cell -> 0  mu #Modifiers(ACT, GLC)
	d_MAL: MAL()@Cell -> 0  mu #Modifiers(ACT, GLC)
	d_OAA: OAA()@Cell -> 0  mu #Modifiers(ACT, GLC)
	d_PEP: PEP()@Cell -> 0  mu #Modifiers(ACT, GLC)
	d_PG3: PG3()@Cell -> 0  mu #Modifiers(ACT, GLC)
	d_PYR: PYR()@Cell -> 0  mu #Modifiers(ACT, GLC)
	env_growth: 0  -> BM()@Environment fRate105() #Modifiers(ACT, GLC)
	env_GLCup: GLC()@Environment -> 0  fRate106() #Modifiers(BM, EIIA_P, EIICB)
	env_ACTup: ACT()@Environment -> 0  fRate107() #Modifiers(Acs, BM)
	env_ACTex: 0  -> ACT()@Environment fRate108() #Modifiers(ACoA, Acoa2act, BM, PYR)
end reaction rules
end model
