###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000272', 'http://identifiers.org/biomodels.db/MODEL1005260001']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/20488988']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/39107', 'http://identifiers.org/obo.bto/BTO:0001035']
#@BQB_IS_VERSION_OF:['http://identifiers.org/obo.go/GO:0004900']
#@BQB_IS_PART_OF:['http://identifiers.org/kegg.pathway/ko04640', 'http://identifiers.org/kegg.pathway/ko04630']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is a plain translation of an SBML model created on 14/08/2021. The original model has 6 molecules and 8 reactions. The translated model has 6 molecules and 8 rules'
###
begin model
begin parameters
	kt 0.0329366 #units:per_minute
	Bmax_SAv 76.0 #units:pM
	kon_SAv 2.29402e-06 #units:per_minute_per_pM
	koff_SAv 0.00679946 #units:per_minute
	kex_SAv 0.01101 #units:per_minute
	kdi 0.00317871 #units:per_minute
	kde 0.0164042 #units:per_minute
end parameters
begin compartments
	#volume units: L
	medium 3 1.0
	cellsurface 3 1.0
	cell 3 1.0
end compartments
begin molecule types
	SAv_EpoRi()
	dSAve()
	EpoR()
	SAv_EpoR()
	dSAvi()
	SAv()
end molecule types
begin seed species
	@cellsurface:EpoR() 45767200000000.0 # (76.0 * 1e-12)mol/L * 6.022e23/mol *1.0L #EpoR #EpoR
	@medium:SAv() 601774244600000.0 #original 999.293picomole/L #SAv #SAv
end seed species
begin observables
	Species EpoR_cellsurface @cellsurface:EpoR() #EpoR
	Species SAv_medium @medium:SAv() #SAv
	Species SAv_EpoR_cellsurface @cellsurface:SAv_EpoR() #SAv_EpoR
	Species SAv_EpoRi_cell @cell:SAv_EpoRi() #SAv_EpoRi
	Species dSAvi_cell @cell:dSAvi() #dSAvi
	Species dSAve_medium @medium:dSAve() #dSAve
end observables
begin functions
	SAv_cells() = SAv_EpoRi_cell + dSAvi_cell
	SAv_medium_ar() = SAv_medium + dSAve_medium
	fRate0() = Bmax_SAv*kt
end functions
begin reaction rules
	reaction_1: 0  -> EpoR()@cellsurface fRate0()
	reaction_2: EpoR()@cellsurface -> 0  kt
	reaction_3: SAv()@medium + EpoR()@cellsurface -> SAv_EpoR()@cellsurface kon_SAv
	reaction_4: SAv_EpoR()@cellsurface -> SAv()@medium + EpoR()@cellsurface koff_SAv
	reaction_5: SAv_EpoR()@cellsurface -> SAv_EpoRi()@cell kt
	reaction_6: SAv_EpoRi()@cell -> SAv()@medium kex_SAv
	reaction_7: SAv_EpoRi()@cell -> dSAvi()@cell kdi
	reaction_8: SAv_EpoRi()@cell -> dSAve()@medium kde
end reaction rules
end model
