###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1010190002', 'http://identifiers.org/biomodels.db/BIOMD0000000281']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/13692276']
#@BQB_HAS_TAXON:['http://identifiers.org/obo.bto/BTO:0000094', 'http://identifiers.org/taxonomy/9606']
#@BQB_HAS_VERSION:['http://identifiers.org/reactome/REACT_1383.6', 'http://identifiers.org/kegg.pathway/hsa00010']
#@BQB_IS_VERSION_OF:['http://identifiers.org/obo.go/GO:0006119', 'http://identifiers.org/obo.go/GO:0006096']
#@creatorEmail:'lukas@ebi.ac.uk'
#@creatorName:'Endler Lukas'
#@notes:'This is a plain translation of an SBML model created on 14/08/2021. The original model has 32 molecules and 22 reactions. The translated model has 31 molecules and 28 rules'
###
begin model
begin parameters
	r1_k 3000000000.000000
	r2_k 10000000000.000000
	r3_k 40000000000.000000
	r4_k 40000000000.000000
	r5_k 100000.000000
	r6_k 2000000000.000000
	r7_k 80000000.000000
	r8_k 600000000000.000000
	r9_k 400000000.000000
	r10_k 6000000000.000000
	r11_k 10000000000.000000
	r12_k 5000000000.000000
	r13_k 500000000.000000
	r14_k 10000000.000000
	r15_k 20000000.000000
	r16_k 7500000000000.000000
	r17_k 400000000.000000
	r18_k 15000000000.000000
	r19_k 120000000.000000
	r20_k 4000000.000000
	r21_k 3000000000.000000
	r22_k 2000000.000000
end parameters
begin molecule types
	__PUE__enzymeconcernedinATPutilization()
	__PYR__pyruvate()
	__ETZ__phosphofructokinase()
	__MOB__acylenzymeintermediateofglyceraldehyde3_phoshphatedehydrogenase()
	__DPH__extramitochondrialreduceddiphospyridinenucleotide()
	__ENZ__hexokinase()
	__ENG__hexokinase_glucoseintermediate()
	__MOD__glyceraldehyde3_phoshphatedehydrogenase_DPNcomplex()
	__PPP__enzymeintermediateconcernedinATPutilization()
	__XSI__highenergyintermediateinoxidativephosphorylation()
	__GLU__glucose()
	__GAP__glyceraldehyde3_phosphate()
	__DPN__extramitochondrialdiphospyridinenucleotide()
	__OXY__oxygen()
	__AGP__alpha_glycerophosphate()
	__GLP__glucose6_phosphate()
	__DGA__1_3diphosphoglycerate()
	__XSP__phosphorylatedintermediateinoxidativephosphorylation()
	__ADP__adenosinediphosphate()
	__DHA__dihydroxacetonephosphate()
	__ETG__phosphofructokinaseintermediate()
	__PGA__3phosphoglycerate()
	__GPP__hexosediphosphate()
	__TP1__adenosinetriphosphateinstore1__cytoplasm__()
	__DIN__intramitochondrialdiphospyridinenucleotide()
	__DIH__intramitochondrialreduceddiphospyridinenucleotide()
	__PID__inorganicphosphate()
	__TP2__adenosinetriphosphateinstore2__mitochondria__()
	__MOX__glyceraldehyde3_phoshphatedehydrogenase()
	__XI__lowenergyintermediateinoxidativephosphorylation()
	__LAC__lactate()
end molecule types
begin seed species
	__ENZ__hexokinase() 6.022000000000001e+18 # 1e-05mol/L * 6.022e23/mol *1.0L #__ENZ__hexokinase #ENZ
	__TP1__adenosinetriphosphateinstore1__cytoplasm__() 3.011e+20 #original 0.0005mol/L #__TP1__adenosinetriphosphateinstore1__cytoplasm__ #TP1
	__ADP__adenosinediphosphate() 6.022000000000001e+19 #original 0.0001mol/L #__ADP__adenosinediphosphate #ADP
	__ETZ__phosphofructokinase() 6.022000000000001e+18 #original 1e-05mol/L #__ETZ__phosphofructokinase #ETZ
	__DPN__extramitochondrialdiphospyridinenucleotide() 6.022000000000001e+19 #original 0.0001mol/L #__DPN__extramitochondrialdiphospyridinenucleotide #DPN
	__DPH__extramitochondrialreduceddiphospyridinenucleotide() 6.022000000000001e+19 #original 0.0001mol/L #__DPH__extramitochondrialreduceddiphospyridinenucleotide #DPH
	__PID__inorganicphosphate() 2.4088e+21 #original 0.004mol/L #__PID__inorganicphosphate #PID
	__PYR__pyruvate() 6.022e+20 #original 0.001mol/L #__PYR__pyruvate #PYR
	__LAC__lactate() 6.022e+20 #original 0.001mol/L #__LAC__lactate #LAC
	__DIN__intramitochondrialdiphospyridinenucleotide() 1.8066000000000002e+19 #original 3e-05mol/L #__DIN__intramitochondrialdiphospyridinenucleotide #DIN
	__DIH__intramitochondrialreduceddiphospyridinenucleotide() 1.8066000000000002e+19 #original 3e-05mol/L #__DIH__intramitochondrialreduceddiphospyridinenucleotide #DIH
	__XI__lowenergyintermediateinoxidativephosphorylation() 1.2044000000000002e+19 #original 2e-05mol/L #__XI__lowenergyintermediateinoxidativephosphorylation #XI
	__XSI__highenergyintermediateinoxidativephosphorylation() 1.2044000000000002e+19 #original 2e-05mol/L #__XSI__highenergyintermediateinoxidativephosphorylation #XSI
	__OXY__oxygen() 3.011e+20 #original 0.0005mol/L #__OXY__oxygen #OXY
	__XSP__phosphorylatedintermediateinoxidativephosphorylation() 1.2044000000000002e+19 #original 2e-05mol/L #__XSP__phosphorylatedintermediateinoxidativephosphorylation #XSP
	__TP2__adenosinetriphosphateinstore2__mitochondria__() 3.011e+20 #original 0.0005mol/L #__TP2__adenosinetriphosphateinstore2__mitochondria__ #TP2
	__PUE__enzymeconcernedinATPutilization() 1.2044e+18 #original 2e-06mol/L #__PUE__enzymeconcernedinATPutilization #PUE
	__PPP__enzymeintermediateconcernedinATPutilization() 6.022e+17 #original 1e-06mol/L #__PPP__enzymeintermediateconcernedinATPutilization #PPP
	__MOD__glyceraldehyde3_phoshphatedehydrogenase_DPNcomplex() 3.0110000000000004e+19 #original 5e-05mol/L #__MOD__glyceraldehyde3_phoshphatedehydrogenase_DPNcomplex #MOD
end seed species
begin observables
	Species __GLU__glucose __GLU__glucose() #(GLU) glucose
	Species __ENZ__hexokinase __ENZ__hexokinase() #(ENZ) hexokinase
	Species __ENG__hexokinase_glucoseintermediate __ENG__hexokinase_glucoseintermediate() #(ENG) hexokinase-glucose intermediate
	Species __TP1__adenosinetriphosphateinstore1__cytoplasm__ __TP1__adenosinetriphosphateinstore1__cytoplasm__() #(TP1) adenosine triphosphate in store 1 (cytoplasm)
	Species __ADP__adenosinediphosphate __ADP__adenosinediphosphate() #(ADP) adenosine diphosphate
	Species __GLP__glucose6_phosphate __GLP__glucose6_phosphate() #(GLP) glucose 6-phosphate
	Species __ETZ__phosphofructokinase __ETZ__phosphofructokinase() #(ETZ) phosphofructokinase
	Species __ETG__phosphofructokinaseintermediate __ETG__phosphofructokinaseintermediate() #(ETG) phosphofructokinase intermediate
	Species __GPP__hexosediphosphate __GPP__hexosediphosphate() #(GPP) hexose diphosphate
	Species __GAP__glyceraldehyde3_phosphate __GAP__glyceraldehyde3_phosphate() #(GAP) glyceraldehyde 3-phosphate
	Species __DHA__dihydroxacetonephosphate __DHA__dihydroxacetonephosphate() #(DHA) dihydroxacetone phosphate
	Species __DPN__extramitochondrialdiphospyridinenucleotide __DPN__extramitochondrialdiphospyridinenucleotide() #(DPN) extramitochondrial diphospyridine nucleotide
	Species __DPH__extramitochondrialreduceddiphospyridinenucleotide __DPH__extramitochondrialreduceddiphospyridinenucleotide() #(DPH) extramitochondrial reduced diphospyridine nucleotide
	Species __PID__inorganicphosphate __PID__inorganicphosphate() #(PID) inorganic phosphate
	Species __DGA__1_3diphosphoglycerate __DGA__1_3diphosphoglycerate() #(DGA) 1,3 diphosphoglycerate
	Species __PGA__3phosphoglycerate __PGA__3phosphoglycerate() #(PGA) 3 phosphoglycerate
	Species __PYR__pyruvate __PYR__pyruvate() #(PYR) pyruvate
	Species __LAC__lactate __LAC__lactate() #(LAC) lactate
	Species __DIN__intramitochondrialdiphospyridinenucleotide __DIN__intramitochondrialdiphospyridinenucleotide() #(DIN) intramitochondrial diphospyridine nucleotide
	Species __DIH__intramitochondrialreduceddiphospyridinenucleotide __DIH__intramitochondrialreduceddiphospyridinenucleotide() #(DIH) intramitochondrial reduced diphospyridine nucleotide
	Species __XI__lowenergyintermediateinoxidativephosphorylation __XI__lowenergyintermediateinoxidativephosphorylation() #(XI) low energy intermediate in oxidative phosphorylation
	Species __XSI__highenergyintermediateinoxidativephosphorylation __XSI__highenergyintermediateinoxidativephosphorylation() #(XSI) high energy intermediate in oxidative phosphorylation
	Species __OXY__oxygen __OXY__oxygen() #(OXY) oxygen
	Species __XSP__phosphorylatedintermediateinoxidativephosphorylation __XSP__phosphorylatedintermediateinoxidativephosphorylation() #(XSP) phosphorylated intermediate in oxidative phosphorylation
	Species __TP2__adenosinetriphosphateinstore2__mitochondria__ __TP2__adenosinetriphosphateinstore2__mitochondria__() #(TP2) adenosine triphosphate in store 2 (mitochondria)
	Species __PUE__enzymeconcernedinATPutilization __PUE__enzymeconcernedinATPutilization() #(PUE) enzyme concerned in ATP utilization
	Species __PPP__enzymeintermediateconcernedinATPutilization __PPP__enzymeintermediateconcernedinATPutilization() #(PPP) enzyme intermediate concerned in ATP utilization
	Species __AGP__alpha_glycerophosphate __AGP__alpha_glycerophosphate() #(AGP) alpha-glycerophosphate
	Species __MOD__glyceraldehyde3_phoshphatedehydrogenase_DPNcomplex __MOD__glyceraldehyde3_phoshphatedehydrogenase_DPNcomplex() #(MOD) glyceraldehyde 3-phoshphate dehydrogenase-DPN complex
	Species __MOB__acylenzymeintermediateofglyceraldehyde3_phoshphatedehydrogenase __MOB__acylenzymeintermediateofglyceraldehyde3_phoshphatedehydrogenase() #(MOB) acyl enzyme intermediate of glyceraldehyde 3-phoshphate dehydrogenase
	Species __MOX__glyceraldehyde3_phoshphatedehydrogenase __MOX__glyceraldehyde3_phoshphatedehydrogenase() #(MOX) glyceraldehyde 3-phoshphate dehydrogenase
end observables
begin functions
	MOX_0() = 20000.0*__MOX__glyceraldehyde3_phoshphatedehydrogenase
	MOB_0() = 10000.0*__MOB__acylenzymeintermediateofglyceraldehyde3_phoshphatedehydrogenase
	MOD_0() = 20000.0*__MOD__glyceraldehyde3_phoshphatedehydrogenase_DPNcomplex
	AGP_0() = 769.230769230769*__AGP__alpha_glycerophosphate
	PPP_0() = 0.326797385620915*__PPP__enzymeintermediateconcernedinATPutilization
	PUE_0() = 326797.385620915*__PUE__enzymeconcernedinATPutilization
	DBP_0() = 40.0*__DBP__dibromophenol
	TP2_0() = 666.666666666667*__TP2__adenosinetriphosphateinstore2__mitochondria__
	XSP_0() = 16666.6666666667*__XSP__phosphorylatedintermediateinoxidativephosphorylation
	OXY_0() = 2000.0*__OXY__oxygen
	XSI_0() = 16666.6666666667*__XSI__highenergyintermediateinoxidativephosphorylation
	XI_0() = 16666.6666666667*__XI__lowenergyintermediateinoxidativephosphorylation
	DIH_0() = 14285.7142857143*__DIH__intramitochondrialreduceddiphospyridinenucleotide
	DIN_0() = 14285.7142857143*__DIN__intramitochondrialdiphospyridinenucleotide
	LAC_0() = 833.333333333333*__LAC__lactate
	PYR_0() = 500.0*__PYR__pyruvate
	PGA_0() = 5000.0*__PGA__3phosphoglycerate
	DGA_0() = 5000.0*__DGA__1_3diphosphoglycerate
	PID_0() = 200.0*__PID__inorganicphosphate
	DPH_0() = 5000.0*__DPH__extramitochondrialreduceddiphospyridinenucleotide
	DPN_0() = 4000.0*__DPN__extramitochondrialdiphospyridinenucleotide
	DHA_0() = 769.230769230769*__DHA__dihydroxacetonephosphate
	GAP_0() = 5000.0*__GAP__glyceraldehyde3_phosphate
	GPP_0() = 1000.0*__GPP__hexosediphosphate
	ETG_0() = 100000.0*__ETG__phosphofructokinaseintermediate
	ETZ_0() = 100000.0*__ETZ__phosphofructokinase
	GLP_0() = 1000.0*__GLP__glucose6_phosphate
	ADP_0() = 1000.0*__ADP__adenosinediphosphate
	TP1_0() = 666.666666666667*__TP1__adenosinetriphosphateinstore1__cytoplasm__
	ENG_0() = 98039.2156862745*__ENG__hexokinase_glucoseintermediate
	ENZ_0() = 98039.2156862745*__ENZ__hexokinase
	GLU_0() = 333.333333333333*__GLU__glucose
	fRate0() = 3000.0
	fRate1() = 10000.0
	fRate2() = 40000.0
	fRate3() = 40000.0
	fRate4() = 0.1
	fRate5() = 2000.0
	fRate6() = 80.0
	fRate7() = 600000.0
	fRate8() = 400.0
	fRate9() = 6000.0
	fRate10() = 10000.0
	fRate11() = 5000.0
	fRate12() = 500.0
	fRate13() = 10.0
	fRate14() = 20.0*__DIN__intramitochondrialdiphospyridinenucleotide*__PYR__pyruvate
	fRate15() = 7500000.0*__DIH__intramitochondrialreduceddiphospyridinenucleotide*__OXY__oxygen*__XI__lowenergyintermediateinoxidativephosphorylation
	fRate16() = 400.0
	fRate17() = 15000.0
	fRate18() = 120.0*__DBP__dibromophenol
	fRate19() = 4.0*__DBP__dibromophenol
	fRate20() = 3000.0
	fRate21() = 2.0
end functions
begin reaction rules
	r_1: __GLU__glucose() + __ENZ__hexokinase() -> __ENG__hexokinase_glucoseintermediate() fRate0()
	r_2: __ENG__hexokinase_glucoseintermediate() + __TP1__adenosinetriphosphateinstore1__cytoplasm__() -> __ADP__adenosinediphosphate() + __GLP__glucose6_phosphate() + __ENZ__hexokinase() fRate1()
	r_3: __GLP__glucose6_phosphate() + __ETZ__phosphofructokinase() -> __ETG__phosphofructokinaseintermediate() fRate2()
	r_4: __ETG__phosphofructokinaseintermediate() + __TP1__adenosinetriphosphateinstore1__cytoplasm__() -> __GPP__hexosediphosphate() + __ETZ__phosphofructokinase() + __ADP__adenosinediphosphate() fRate3()
	r_5: __GPP__hexosediphosphate() -> __GAP__glyceraldehyde3_phosphate() + __DHA__dihydroxacetonephosphate() fRate4()
	r_6: __DHA__dihydroxacetonephosphate() + __DPH__extramitochondrialreduceddiphospyridinenucleotide() -> __AGP__alpha_glycerophosphate() + __DPN__extramitochondrialdiphospyridinenucleotide() fRate5()
	r_7: __AGP__alpha_glycerophosphate() + __DPN__extramitochondrialdiphospyridinenucleotide() -> __DHA__dihydroxacetonephosphate() + __DPH__extramitochondrialreduceddiphospyridinenucleotide() fRate6()
	r_8: __GAP__glyceraldehyde3_phosphate() + __MOD__glyceraldehyde3_phoshphatedehydrogenase_DPNcomplex() -> __MOB__acylenzymeintermediateofglyceraldehyde3_phoshphatedehydrogenase() + __DPH__extramitochondrialreduceddiphospyridinenucleotide() fRate7()
	r_9: __MOB__acylenzymeintermediateofglyceraldehyde3_phoshphatedehydrogenase() + __PID__inorganicphosphate() -> __DGA__1_3diphosphoglycerate() + __MOX__glyceraldehyde3_phoshphatedehydrogenase() fRate8()
	r_10: __MOX__glyceraldehyde3_phoshphatedehydrogenase() + __DPN__extramitochondrialdiphospyridinenucleotide() -> __MOD__glyceraldehyde3_phoshphatedehydrogenase_DPNcomplex() fRate9()
	r_11: __DGA__1_3diphosphoglycerate() + __ADP__adenosinediphosphate() -> __TP1__adenosinetriphosphateinstore1__cytoplasm__() + __PGA__3phosphoglycerate() fRate10()
	r_12: __PGA__3phosphoglycerate() + __ADP__adenosinediphosphate() -> __TP1__adenosinetriphosphateinstore1__cytoplasm__() + __PYR__pyruvate() fRate11()
	r_13: __PYR__pyruvate() + __DPH__extramitochondrialreduceddiphospyridinenucleotide() -> __LAC__lactate() + __DPN__extramitochondrialdiphospyridinenucleotide() fRate12()
	r_14: __LAC__lactate() + __DPN__extramitochondrialdiphospyridinenucleotide() -> __PYR__pyruvate() + __DPH__extramitochondrialreduceddiphospyridinenucleotide() fRate13()
	r_15_reactants_0: 0  -> __PYR__pyruvate() -1*(fRate14())
	r_15_reactants_1: 0  -> __DIN__intramitochondrialdiphospyridinenucleotide() -1*4.0*(fRate14())
	r_15_products_0: 0  -> __DIH__intramitochondrialreduceddiphospyridinenucleotide() 4.0*fRate14()
	r_16_reactants_0: 0  -> __DIH__intramitochondrialreduceddiphospyridinenucleotide() -1*(fRate15())
	r_16_reactants_1: 0  -> __XI__lowenergyintermediateinoxidativephosphorylation() -1*3.0*(fRate15())
	r_16_reactants_2: 0  -> __OXY__oxygen() -1*(fRate15())
	r_16_products_0: 0  -> __XSI__highenergyintermediateinoxidativephosphorylation() 3.0*fRate15()
	r_16_products_1: 0  -> __DIN__intramitochondrialdiphospyridinenucleotide() fRate15()
	r_17: __XSI__highenergyintermediateinoxidativephosphorylation() + __PID__inorganicphosphate() -> __XSP__phosphorylatedintermediateinoxidativephosphorylation() fRate16()
	r_18: __XSP__phosphorylatedintermediateinoxidativephosphorylation() + __ADP__adenosinediphosphate() -> __TP2__adenosinetriphosphateinstore2__mitochondria__() + __XI__lowenergyintermediateinoxidativephosphorylation() fRate17()
	r_19: __XSI__highenergyintermediateinoxidativephosphorylation() -> __XI__lowenergyintermediateinoxidativephosphorylation() fRate18() #Modifiers(DBP)
	r_20: __TP2__adenosinetriphosphateinstore2__mitochondria__() -> __TP1__adenosinetriphosphateinstore1__cytoplasm__() fRate19() #Modifiers(DBP)
	r_21: __TP1__adenosinetriphosphateinstore1__cytoplasm__() + __PUE__enzymeconcernedinATPutilization() -> __PPP__enzymeintermediateconcernedinATPutilization() fRate20()
	r_22: __PPP__enzymeintermediateconcernedinATPutilization() -> __ADP__adenosinediphosphate() + __PUE__enzymeconcernedinATPutilization() + __PID__inorganicphosphate() fRate21()
end reaction rules
end model
