###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000294', 'http://identifiers.org/biomodels.db/MODEL1012210000']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/17210532']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/pubmed/460412', 'http://identifiers.org/biomodels.db/BIOMD0000000249', 'http://identifiers.org/pubmed/460424']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/520', 'http://identifiers.org/taxonomy/9606']
#@BQB_HAS_PROPERTY:['http://identifiers.org/doid/DOID:1116', 'http://identifiers.org/mamo/MAMO_0000046']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0035635', 'http://identifiers.org/go/GO:0009814']
#@creatorEmail:'lukas@ebi.ac.uk'
#@creatorName:'Endler Lukas'
#@notes:'This is a plain translation of an SBML model created on 13/08/2021. The original model has 11 molecules and 26 reactions. The translated model has 10 molecules and 31 rules'
###
begin model
begin parameters
	l_e 50.0 #units:time
	R0 17.0 #units:dimensionless
	p 1.0 #units:dimensionless
	tau 0.7 #units:dimensionless
	theta 0.5 #units:dimensionless
	nu 0.5 #units:dimensionless
	eta 0.5 #units:dimensionless
	tInf 21.0 #units:days
	tImm 20.0 #units:time
	tImm_V 50.0 #units:time
	N 1.0
end parameters
begin molecule types
	Iv2()
	R2()
	R1()
	S()
	V()
	J2()
	J1()
	I2()
	R()
	I1()
end molecule types
begin seed species
	S() 0.0588235 #S #S
	I1() 0.00176967 #I1 #I1
	I2() 1e-06 #I2 #I2
	R1() 0.439407 #R1 #R1
	V() 0.9 #V #V
	Iv2() 0.5 #Iv2 #Iv2
end seed species
begin observables
	Species S S() #S
	Species I1 I1() #I1
	Species I2 I2() #I2
	Species R1 R1() #R1
	Species R2 R2() #R2
	Species V V() #V
	Species Iv2 Iv2() #Iv2
	Species J2 J2() #J2
	Species J1 J1() #J1
	Species R R() #R
end observables
begin functions
	gamma() = 365/tInf
	mu() = 1/l_e
	beta() = R0*(gamma + mu)
	R_frac() = R/N
	R_2_frac() = (R + R2)/N
	R_1_frac() = (R + R1)/N
	V_frac() = V/N
	S_frac() = S/N
	strain2_frac() = (I2 + Iv2 + J2)/N
	strain1_frac() = (I1 + J1)/N
	sigmaV() = 1/tImm_V
	sigma() = 1/tImm
	fRate0() = N*mu*(1 - p)
	fRate1() = N*mu*p
	fRate12() = S*beta*(I1 + J1)/N
	fRate13() = S*beta*(I2 + Iv2 + J2)/N
	fRate14() = V*beta*(1 - tau)*(I2 + Iv2 + J2)/N
	fRate17() = R2*beta*(1 - theta)*(I1 + J1)/N
	fRate18() = R1*beta*(1 - theta)*(I2 + Iv2 + J2)/N
	fRate19() = -gamma/(nu - 1.0)
	fRate20() = -gamma/(nu - 1.0)
	fRate21() = -gamma/(eta - 1.0)
end functions
begin reaction rules
	r1_products_0: 0  -> S() fRate0() #Modifiers(N)
	r2: 0  -> V() fRate1() #Modifiers(N)
	r3: S() -> 0  mu
	r4: V() -> 0  mu
	r5: I1() -> 0  mu
	r6: I2() -> 0  mu
	r7: Iv2() -> 0  mu
	r8: R1() -> 0  mu
	r9: R2() -> 0  mu
	r10: J1() -> 0  mu
	r11: J2() -> 0  mu
	r12: R() -> 0  mu
	r13_reactants_0: 0  -> S() -1*(fRate12()) #Modifiers(J1, N)
	r13_products_0: 0  -> I1() fRate12() #Modifiers(J1, N)
	r14_reactants_0: 0  -> S() -1*(fRate13()) #Modifiers(J2, N, Iv2)
	r14_products_0: 0  -> I2() fRate13() #Modifiers(J2, N, Iv2)
	r15_reactants_0: 0  -> V() -1*(fRate14()) #Modifiers(J2, N, I2)
	r15_products_0: 0  -> Iv2() fRate14() #Modifiers(J2, N, I2)
	r16: I1() -> R1() gamma
	r17: I2() -> R2() gamma
	r18_reactants_0: 0  -> R2() -1*(fRate17()) #Modifiers(N, I1)
	r18_products_0: 0  -> J1() fRate17() #Modifiers(N, I1)
	r19_reactants_0: 0  -> R1() -1*(fRate18()) #Modifiers(N, I2, Iv2)
	r19_products_0: 0  -> J2() fRate18() #Modifiers(N, I2, Iv2)
	r20: J1() -> R() fRate19()
	r21: J2() -> R() fRate20()
	r22: Iv2() -> R() fRate21()
	r23: R1() -> S() sigma
	r24: R2() -> S() sigma
	r25: R() -> S() sigma
	r26: V() -> S() sigmaV
end reaction rules
end model
