###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000337', 'http://identifiers.org/biomodels.db/MODEL1105120000']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/11283355']
#@BQB_IS_VERSION_OF:['http://identifiers.org/obo.go/GO:0006754', 'http://identifiers.org/obo.go/GO:0071318']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/131567']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is a plain translation of an SBML model created on 14/08/2021. The original model has 3 molecules and 5 reactions. The translated model has 3 molecules and 5 rules'
###
begin model
begin parameters
	v 10.0 #units:dimensionless
	d 1.0 #units:dimensionless
end parameters
begin molecule types
	N2()
	S()
	N1()
end molecule types
begin seed species
	S() 6.6911111111111044e+22 # 0.111111111111111mol/L * 6.022e23/mol *1.0L #S #S
	N1() 6.022e+25 #original 100.0/  #N1 #N1
end seed species
begin observables
	Species S S() #S
	Species N1 N1() #N1
	Species N2 N2() #N2
end observables
begin functions
	fRate1() = N1/(S + 1.0)
	fRate2() = 20.0*N2/(S + 1.0)
end functions
begin reaction rules
	r1: 0  -> S() v
	r2: S() -> N1() + N1() + N1() + N1() + N1() + N1() + N1() + N1() + N1() + N1() fRate1()
	r3: S() -> N2() fRate2()
	r4: N1() -> 0  d
	r5: N2() -> 0  d
end reaction rules
end model
