###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000364', 'http://identifiers.org/biomodels.db/MODEL1108260002']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/20435402']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/pubmed/17726029']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0007596']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@creatorEmail:'schubert@ebi.ac.uk'
#@creatorName:'Schubert Michael'
#@notes:'This is a plain translation of an SBML model created on 14/08/2021. The original model has 14 molecules and 16 reactions. The translated model has 13 molecules and 16 rules'
###
begin model
begin parameters
	k1 91.8
	k2 82.4
	k9 3.12e-08
	k3 38.1
	k3a 151.5
	k4 38.1
	k4a 209.9
	k5 5.16
	k6 32.3
	k10 7.23e-10
	k7 6.76e-08
	k7a 4.7
	k8 0.00599
	k8a 42.6
	kC1 2.39e-06
	kC2 0.031
	j1 33.4
	j3 1.58e-06
	j3a 0.185
	j5 21.8
	j7 4.46e-09
	j7a 2.66e-05
end parameters
begin molecule types
	E_M1()
	T()
	E_P_2()
	P()
	E()
	M1()
	E_P21()
	P21()
	E_P_1()
	P2()
	M()
	E_M()
	E_P2()
end molecule types
begin seed species
	E() 90329999999999.98 # (0.00015 * 1e-06)mol/L * 6.022e23/mol *1.0L #E #E
	P() 6.022e+17 #original 1.0substance/L  #P #P
end seed species
begin observables
	Species E E() #E
	Species E_P_1 E_P_1() #E_P_1
	Species P P() #P
	Species M M() #M
	Species M1 M1() #M1
	Species E_M1 E_M1() #E_M1
	Species E_M E_M() #E_M
	Species T T() #T
	Species E_P_2 E_P_2() #E_P_2
	Species P2 P2() #P2
	Species P21 P21() #P21
	Species E_P21 E_P21() #E_P21
	Species E_P2 E_P2() #E_P2
end observables
begin reaction rules
	r1: E() + P() <-> E_P_1() k1,j1
	r2: E_P_1() -> E() + M() k2
	r3: M() -> M1() k9
	r4: E() + M1() <-> E_M1() k3,j3
	r5: E() + M() <-> E_M() k3a,j3a
	r6: E_M1() -> E() + T() k4
	r7: E_M() -> E() + T() k4a
	r8: E() + P() <-> E_P_2() k5,j5
	r9: E_P_2() -> E() + P2() k6
	r10: P2() -> P21() k10
	r11: E() + P21() <-> E_P21() k7,j7
	r12: E() + P2() <-> E_P2() k7a,j7a
	r13: E_P21() -> E() + T() k8
	r14: E_P2() -> E() + T() k8a
	r15: E_P_1() -> T() kC1
	r16: E_P_2() -> T() kC2
end reaction rules
end model
