###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000391', 'http://identifiers.org/biomodels.db/MODEL1109270007', 'http://identifiers.org/go/GO:0019253']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/22001849']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/33090']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is a plain translation of an SBML model created on 13/08/2021. The original model has 22 molecules and 21 reactions. The translated model has 21 molecules and 21 rules'
###
begin model
begin parameters
	Pext_cytosol 3.011e+20 #original 0.5/
	Pext 3.011e+20 #original 0.5/
	r1_Vm 340.000000
	r1_K 0.020000
	r1_KR1 0.840000
	r1_KR2 0.040000
	r1_KR3 0.007500
	r1_KR4 0.900000
	r1_KR5 0.070000
	r2_k1 500000000.000000
	r2_k2 1612900000000.000000
	r3_k1 500000000.000000
	r3_k2 31.250000
	r4_k1 500000000.000000
	r4_k2 22727000.000000
	r5_k1 500000000.000000
	r5_k2 70423000.000000
	r6_Vm 200.000000
	r6_K 0.030000
	r6_KR1 0.700000
	r6_KR2 12.000000
	r7_k1 500000000.000000
	r7_k2 5952400000.000000
	r8_k1 500000000.000000
	r8_k2 38461500.000000
	r9_Vm 40.000000
	r9_K 0.020000
	r9_KR1 12.000000
	r10_k1 500000000.000000
	r10_k2 588240000.000000
	r11_k1 500000000.000000
	r11_k2 1250000000.000000
	r12_k1 500000000.000000
	r12_k2 746269000.000000
	r13_Vm 1000.000000
	r13_K1 0.050000
	r13_KR1 2.000000
	r13_KR2 0.700000
	r13_KR3 4.000000
	r13_KR41 2.500000
	r13_K2 0.050000
	r13_KR42 0.400000
	r14_k1 500000000.000000
	r14_k2 217400000.000000
	r15_k1 500000000.000000
	r15_k2 8621000000.000000
	r16_Vm 40.000000
	r16_K1 0.080000
	r16_K2 0.080000
	r16_KR1 10.000000
	r16_KA1 0.100000
	r16_KA2 0.020000
	r16_KA3 0.020000
	r17_Vm 40.000000
	r17_K 0.100000
	r17_KR1 0.050000
	r18_Vm 350.000000
	r18_K1 0.014000
	r18_K2 0.300000
	r19_Vm 250.000000
	r19_KA 0.740000
	r19_K 0.250000
	r19_KR1 0.630000
	r19_KR2 0.075000
	r19_KR3 0.077000
	r20_Vm 250.000000
	r20_KA 0.740000
	r20_K 0.075000
	r20_KR1 0.630000
	r20_KR2 0.250000
	r20_KR3 0.077000
	r21_Vm 250.000000
	r21_KA 0.740000
	r21_K 0.077000
	r21_KR1 0.630000
	r21_KR2 0.250000
	r21_KR3 0.075000
end parameters
begin compartments
	#volume units: 
	chloroplast 3 1.0
	cytosol 3 1.0
end compartments
begin molecule types
	X5P()
	F6P()
	Ru5P()
	H()
	R5P()
	DPGA()
	FBP()
	SBP()
	RuBP()
	ADP()
	NADPH()
	Pi()
	DHAP()
	ATP()
	E4P()
	G1P()
	S7P()
	G6P()
	NADP()
	PGA()
	GAP()
end molecule types
begin seed species
	@chloroplast:RuBP() 1.2044e+21 # (2.0 * 0.001)mol/L * 6.022e23/mol *1.0L #RuBP #RuBP
	@chloroplast:PGA() 1.44528e+21 #original 2.4/ #PGA #PGA
	@chloroplast:DPGA() 6.6242e+17 #original 0.0011/ #DPGA #DPGA
	@chloroplast:GAP() 1.2044000000000002e+19 #original 0.02/ #GAP #GAP
	@chloroplast:DHAP() 2.8905600000000003e+20 #original 0.48/ #DHAP #DHAP
	@chloroplast:FBP() 4.034739999999995e+20 #original 0.669999999999999/ #FBP #FBP
	@chloroplast:F6P() 3.858682355682418e+20 #original 0.640764257004719/ #F6P #F6P
	@chloroplast:E4P() 3.0110000000000004e+19 #original 0.05/ #E4P #E4P
	@chloroplast:SBP() 1.8066e+20 #original 0.3/ #SBP #SBP
	@chloroplast:S7P() 1.2044e+21 #original 2.0/ #S7P #S7P
	@chloroplast:X5P() 4.500747384155454e+19 #original 0.0747384155455904/ #X5P #X5P
	@chloroplast:R5P() 7.538751868460392e+19 #original 0.125186846038864/ #R5P #R5P
	@chloroplast:Ru5P() 3.0155007473841558e+19 #original 0.0500747384155456/ #Ru5P #Ru5P
	@chloroplast:G6P() 8.87496941806954e+20 #original 1.47375779111085/ #G6P #G6P
	@chloroplast:G1P() 5.147482262480339e+19 #original 0.0854779518844294/ #G1P #G1P
	@chloroplast:ATP() 4.0949600000000007e+20 #original 0.68/ #ATP #ATP
	@chloroplast:ADP() -4.09496e+20 #original 0.82/ #ADP #ADP
	@chloroplast:$NADPH() 1.2646200000000002e+20 #original 0.21/ #NADPH #NADPH
	@chloroplast:$NADP() 1.74638e+20 #original 0.29/ #NADP #NADP
	@chloroplast:$H() 7581248829824493.0 #original 1.25892541179417e-05/ #H #H
	@chloroplast:Pi() -8.44416884e+21 #original 0.977800000000002/ #Pi #Pi
end seed species
begin observables
	Species RuBP_chloroplast @chloroplast:RuBP() #RuBP
	Species PGA_chloroplast @chloroplast:PGA() #PGA
	Species DPGA_chloroplast @chloroplast:DPGA() #DPGA
	Species GAP_chloroplast @chloroplast:GAP() #GAP
	Species DHAP_chloroplast @chloroplast:DHAP() #DHAP
	Species FBP_chloroplast @chloroplast:FBP() #FBP
	Species F6P_chloroplast @chloroplast:F6P() #F6P
	Species E4P_chloroplast @chloroplast:E4P() #E4P
	Species SBP_chloroplast @chloroplast:SBP() #SBP
	Species S7P_chloroplast @chloroplast:S7P() #S7P
	Species X5P_chloroplast @chloroplast:X5P() #X5P
	Species R5P_chloroplast @chloroplast:R5P() #R5P
	Species Ru5P_chloroplast @chloroplast:Ru5P() #Ru5P
	Species G6P_chloroplast @chloroplast:G6P() #G6P
	Species G1P_chloroplast @chloroplast:G1P() #G1P
	Species ATP_chloroplast @chloroplast:ATP() #ATP
	Species ADP_chloroplast @chloroplast:ADP() #ADP
	Species NADPH_chloroplast @chloroplast:NADPH() #NADPH
	Species NADP_chloroplast @chloroplast:NADP() #NADP
	Species H_chloroplast @chloroplast:H() #H
	Species Pi_chloroplast @chloroplast:Pi() #Pi
end observables
begin functions
	ADP_ar() = 1.5 - ATP_chloroplast
	Pi_ar() = -ATP_chloroplast - DHAP_chloroplast - 2*DPGA_chloroplast - E4P_chloroplast - F6P_chloroplast - 2*FBP_chloroplast - G1P_chloroplast - G6P_chloroplast - GAP_chloroplast - PGA_chloroplast - R5P_chloroplast - Ru5P_chloroplast - 2*RuBP_chloroplast - S7P_chloroplast - 2*SBP_chloroplast - X5P_chloroplast + 15
	fRate0() = 340.0/(0.5*FBP_chloroplast + 0.285714285714286*NADPH_chloroplast + 0.0238095238095238*PGA_chloroplast + 0.0222222222222222*Pi_chloroplast + RuBP_chloroplast + 2.66666666666667*SBP_chloroplast + 0.02)
	fRate5() = 1680.0/(0.36*F6P_chloroplast + 8.4*FBP_chloroplast + 0.021*Pi_chloroplast + 0.252)
	fRate8() = 480.0/(0.02*Pi_chloroplast + 12.0*SBP_chloroplast + 0.24)
	fRate12() = 5600.0/(0.056*ADP_chloroplast*ATP_chloroplast*PGA_chloroplast + 0.028*ADP_chloroplast*ATP_chloroplast*Pi_chloroplast + 0.16*ADP_chloroplast*ATP_chloroplast*RuBP_chloroplast + 2.24*ADP_chloroplast*ATP_chloroplast*(Ru5P_chloroplast + 0.05) + 0.0175*ADP_chloroplast*PGA_chloroplast + 0.00875*ADP_chloroplast*Pi_chloroplast + 0.05*ADP_chloroplast*RuBP_chloroplast + 0.7*ADP_chloroplast*(Ru5P_chloroplast + 0.05) + 5.6*ATP_chloroplast*Ru5P_chloroplast + 0.28*ATP_chloroplast + 0.14*PGA_chloroplast*(ATP_chloroplast + 0.05) + 0.07*Pi_chloroplast*(ATP_chloroplast + 0.05) + 0.28*Ru5P_chloroplast + 0.4*RuBP_chloroplast*(ATP_chloroplast + 0.05) + 0.014)
	fRate15() = (8.0*F6P_chloroplast + 8.0*FBP_chloroplast + 40.0*PGA_chloroplast)/(0.0064*ADP_chloroplast*Pi_chloroplast*(G1P_chloroplast + 0.08) + ADP_chloroplast*(0.02*F6P_chloroplast + 0.02*FBP_chloroplast + 0.1*PGA_chloroplast)*(ATP_chloroplast*G1P_chloroplast + 0.08*ATP_chloroplast + 0.08*G1P_chloroplast + 0.0064) + 0.064*Pi_chloroplast*(G1P_chloroplast + 0.08) + (0.2*F6P_chloroplast + 0.2*FBP_chloroplast + 1.0*PGA_chloroplast)*(ATP_chloroplast*G1P_chloroplast + 0.08*ATP_chloroplast + 0.08*G1P_chloroplast + 0.0064))
	fRate16() = 2.0/(0.1*G1P_chloroplast + 0.05*Pi_chloroplast + 0.005)
	fRate17() = 350.0/(ADP_chloroplast*Pi_chloroplast + 0.3*ADP_chloroplast + 0.014*Pi_chloroplast + 0.0042)
	fRate18() = 0.9095625*Pext_cytosol/(0.0118125*DHAP_chloroplast*Pext_cytosol + 0.00874125*DHAP_chloroplast + 0.0121275*GAP_chloroplast*Pext_cytosol + 0.00897435*GAP_chloroplast + 0.002692305*PGA_chloroplast + 0.00144375*Pext_cytosol*Pi_chloroplast + 0.00363825*Pext_cytosol*(PGA_chloroplast + 0.25) + 0.001068375*Pi_chloroplast)
	fRate19() = 3.031875*Pext_cytosol/(0.0118125*DHAP_chloroplast*Pext_cytosol + 0.00874125*DHAP_chloroplast + 0.00897435*GAP_chloroplast + 0.00363825*PGA_chloroplast*Pext_cytosol + 0.002692305*PGA_chloroplast + 0.00144375*Pext_cytosol*Pi_chloroplast + 0.0121275*Pext_cytosol*(GAP_chloroplast + 0.075) + 0.001068375*Pi_chloroplast)
	fRate20() = 2.953125*Pext_cytosol/(0.00874125*DHAP_chloroplast + 0.0121275*GAP_chloroplast*Pext_cytosol + 0.00897435*GAP_chloroplast + 0.00363825*PGA_chloroplast*Pext_cytosol + 0.002692305*PGA_chloroplast + 0.00144375*Pext_cytosol*Pi_chloroplast + 0.0118125*Pext_cytosol*(DHAP_chloroplast + 0.077) + 0.001068375*Pi_chloroplast)
end functions
begin reaction rules
	RuBisCO: RuBP()@chloroplast -> PGA()@chloroplast + PGA()@chloroplast fRate0() #Modifiers(PGA, FBP, SBP, Pi, NADPH)
	PGA_K: PGA()@chloroplast + ATP()@chloroplast <-> DPGA()@chloroplast + ADP()@chloroplast r2_k1,r2_k2
	GAP_DH: DPGA()@chloroplast + NADPH()@chloroplast + H()@chloroplast <-> GAP()@chloroplast + NADP()@chloroplast + Pi()@chloroplast r3_k1,r3_k2
	TP_I: GAP()@chloroplast <-> DHAP()@chloroplast r4_k1,r4_k2
	FBP_A: DHAP()@chloroplast + GAP()@chloroplast <-> FBP()@chloroplast r5_k1,r5_k2
	FBPase: FBP()@chloroplast -> F6P()@chloroplast + Pi()@chloroplast fRate5() #Modifiers(F6P, Pi)
	F6P_TK: GAP()@chloroplast + F6P()@chloroplast <-> X5P()@chloroplast + E4P()@chloroplast r7_k1,r7_k2
	SBP_A: DHAP()@chloroplast + E4P()@chloroplast <-> SBP()@chloroplast r8_k1,r8_k2
	SBPase: SBP()@chloroplast -> S7P()@chloroplast + Pi()@chloroplast fRate8() #Modifiers(Pi)
	S7P_TK: GAP()@chloroplast + S7P()@chloroplast <-> X5P()@chloroplast + R5P()@chloroplast r10_k1,r10_k2
	R5P_I: R5P()@chloroplast <-> Ru5P()@chloroplast r11_k1,r11_k2
	Ru5P_E: X5P()@chloroplast <-> Ru5P()@chloroplast r12_k1,r12_k2
	Ru5P_K: Ru5P()@chloroplast + ATP()@chloroplast -> RuBP()@chloroplast + ADP()@chloroplast fRate12() #Modifiers(PGA, RuBP, Pi, ADP)
	PG_I: F6P()@chloroplast <-> G6P()@chloroplast r14_k1,r14_k2
	PG_M: G6P()@chloroplast <-> G1P()@chloroplast r15_k1,r15_k2
	Starch_S: G1P()@chloroplast + ATP()@chloroplast -> 0  fRate15() #Modifiers(ADP, Pi, PGA, F6P, FBP)
	Starch_P: Pi()@chloroplast -> G1P()@chloroplast fRate16() #Modifiers(G1P)
	ATP_S: ADP()@chloroplast + Pi()@chloroplast -> ATP()@chloroplast fRate17()
	TPT_PGA: PGA()@chloroplast -> 0  fRate18() #Modifiers(Pext, Pi, GAP, DHAP)
	TPT_GAP: GAP()@chloroplast -> 0  fRate19() #Modifiers(Pext, Pi, PGA, DHAP)
	TPT_DHAP: DHAP()@chloroplast -> 0  fRate20() #Modifiers(Pext, Pi, PGA, GAP)
end reaction rules
end model
