###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000393', 'http://identifiers.org/biomodels.db/MODEL1109270009']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/22001849']
#@BQB_ENCODES:['http://identifiers.org/go/GO:0019253']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/33090']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is a plain translation of an SBML model created on 13/08/2021. The original model has 58 molecules and 36 reactions. The translated model has 42 molecules and 65 rules'
###
begin model
begin parameters
	cA 1.5
	cP 15.0
	cAc 1.0
	cPc 15.0
	cNc 0.87
	cUc 1.5
	E 1.456965457
	GAP_chloroplast 1.43380952380952e+19 #original 0.0238095238095238/
	GAP 1.43380952380952e+19 #original 0.0238095238095238/
	DHAP_chloroplast 2.86761904761905e+20 #original 0.476190476190476/
	DHAP 2.86761904761905e+20 #original 0.476190476190476/
	F6P_chloroplast 3.85868235568241e+20 #original 0.640764257004718/
	F6P 3.85868235568241e+20 #original 0.640764257004718/
	G6P_chloroplast 8.87496941806955e+20 #original 1.47375779111085/
	G6P 8.87496941806955e+20 #original 1.47375779111085/
	G1P_chloroplast 5.14748226248035e+19 #original 0.0854779518844294/
	G1P 5.14748226248035e+19 #original 0.0854779518844294/
	X5P_chloroplast 4.50074738415546e+19 #original 0.0747384155455904/
	X5P 4.50074738415546e+19 #original 0.0747384155455904/
	R5P_chloroplast 7.53875186846039e+19 #original 0.125186846038864/
	R5P 7.53875186846039e+19 #original 0.125186846038864/
	Ru5P_chloroplast 3.01550074738415e+19 #original 0.0500747384155456/
	Ru5P 3.01550074738415e+19 #original 0.0500747384155456/
	CO2_chloroplast 5.4198e+18 #original 0.009/
	CO2 5.4198e+18 #original 0.009/
	O2_chloroplast 1.5934212e+20 #original 0.2646/
	O2 1.5934212e+20 #original 0.2646/
	GAPc_cytosol 6.59552380952381e+19 #original 0.109523809523809/
	GAPc 6.59552380952381e+19 #original 0.109523809523809/
	DHAPc_cytosol 1.31910476190476e+21 #original 2.19047619047619/
	DHAPc 1.31910476190476e+21 #original 2.19047619047619/
	F6Pc_cytosol 1.01701646905355e+21 #original 1.68883505322742/
	F6Pc 1.01701646905355e+21 #original 1.68883505322742/
	G6Pc_cytosol 2.33913787882317e+21 #original 3.88432062242307/
	G6Pc 2.33913787882317e+21 #original 3.88432062242307/
	G1Pc_cytosol 1.36605652123273e+20 #original 0.226844324349507/
	G1Pc 1.36605652123273e+20 #original 0.226844324349507/
	PiTc_cytosol -7.28662939432e+21 #original 4.0999844/
	PiTc -7.28662939432e+21 #original 4.0999844/
	r1_K 0.020000
	r1_KR1 0.840000
	r1_KR2 0.040000
	r1_KR3 0.075000
	r1_KR4 0.900000
	r1_KR5 0.070000
	r2_Vm 30.140800
	r2_Ks1 0.240000
	r2_Ks2 0.390000
	r2_Kr1 0.230000
	r3_Vm 4.039480
	r3_K1 0.004000
	r3_K2 0.100000
	r4_q 7.100000
	r4_Ks1 0.300000
	r4_Ks2 0.400000
	r4_Kp1 0.020000
	r4_Vm 1.218890
	r5_Vm 0.726260
	r5_q 666000.000000
	r5_Ks1 0.033000
	r5_Kr1 0.700000
	r5_Kr2 12.000000
	r6_Vm 3.122070
	r6_Ks1 0.100000
	r6_Ks2 0.100000
	r6_Kr1 0.100000
	r6_Kr2 0.100000
	r6_q 10.000000
	r7_Vm 1.218890
	r7_q 1.017000
	r7_Ks1 0.400000
	r7_Ks2 0.200000
	r8_Vm 0.324191
	r8_q 666000.000000
	r8_Ks1 0.050000
	r8_Kr1 12.000000
	r9_Vm 3.122070
	r9_Ks1 0.072000
	r9_Ks2 0.460000
	r9_Kr1 0.100000
	r9_Kr2 1.500000
	r9_q 1.176470
	r10_Vm 10.834800
	r10_q 6846.000000
	r10_Ks1 0.050000
	r10_Kr1 2.000000
	r10_Kr2 0.700000
	r10_Kr3 4.000000
	r10_Kr41 2.500000
	r10_Ks2 0.059000
	r10_Kr42 0.400000
	r11_q 5.734000
	r11_Ks1 0.014000
	r11_Ks2 0.300000
	r11_Kp1 0.300000
	r11_Vm 15.000000
	r12_Vm 0.266843
	r12_K1 0.080000
	r12_K2 0.080000
	r12_KR1 10.000000
	r12_KA1 0.100000
	r12_KA2 0.020000
	r12_KA3 0.020000
	r13_Vm 1.243330
	r13_KA 0.740000
	r13_K 0.250000
	r13_KR1 0.630000
	r13_KR2 0.075000
	r13_KR3 0.077000
	r14_Vm 1.243330
	r14_KA 0.740000
	r14_K 0.075000
	r14_KR1 0.630000
	r14_KR2 0.250000
	r14_KR3 0.077000
	r15_Vm 1.243330
	r15_KA 0.740000
	r15_K 0.077000
	r15_KR1 0.630000
	r15_KR2 0.250000
	r15_KR3 0.075000
	r16_q 12.000000
	r16_Ks1 0.300000
	r16_Ks2 0.400000
	r16_Kp1 0.020000
	r16_Vm 0.107377
	r17_q 6663.000000
	r17_Kp1 0.700000
	r17_Kp2 12.000000
	r17_Vm 0.063979
	r18_q 0.310000
	r18_Ks1 0.140000
	r18_Ks2 0.100000
	r18_Kp1 0.120000
	r18_Kp2 0.110000
	r18_Vm 0.115403
	r19_Vm 0.055503
	r19_q 10.000000
	r19_Ks1 0.800000
	r19_Kr1 0.800000
	r19_Ks2 2.400000
	r19_Kr2 0.700000
	r19_Kr3 0.400000
	r19_Kr4 50.000000
	r19_Kr5 11.000000
	r20_Vm 0.555034
	r20_q 780.000000
	r20_Ks1 0.350000
	r20_Kr1 80.000000
	r21_Vm 0.100915
	r21_q 590.000000
	r21_Ks1 0.500000
	r21_Kr1 0.021000
	r21_Kr2 0.700000
	r21_Ks2 0.500000
	r21_Kr3 0.160000
	r22_Vm 0.016819
	r22_Kr1 0.500000
	r22_Kr2 0.100000
	r22_Ks1 0.032000
	r23_Km 5.000000
	r23_V 2.000000
	r24_Km 1.000000
	r24_V 0.500000
	r25_Km 0.390000
	r25_V 5.000000
	r25_Ki 0.280000
	r26_Km 0.390000
	r26_V 5.000000
	r26_Ki 0.280000
	r27_Km 0.200000
	r27_V 6.000000
	r27_Ki 0.220000
	r28_Km 0.200000
	r28_V 6.000000
	r28_Ki 0.220000
	r29_K 0.020000
	r29_KR1 0.840000
	r29_KR2 0.040000
	r29_KR3 0.075000
	r29_KR4 0.900000
	r29_KR5 0.070000
	r30_Vm 52.419900
	r30_Ks1 0.026000
	r30_Kr1 94.000000
	r30_Kr2 2.550000
	r31_Vm 5.715790
	r31_q 300.000000
	r31_Ks1 0.210000
	r31_Kr1 0.360000
	r31_Ks2 0.250000
	r32_Km 0.100000
	r32_V 1.456110
	r33_Vm 3.306190
	r33_q 0.240000
	r33_Ks1 2.700000
	r33_Kr1 33.000000
	r33_Ks2 0.150000
	r34_Vm 10.009800
	r34_q 250000.000000
	r34_Ks1 0.090000
	r34_Kr1 12.000000
	r35_Vm 2.745820
	r35_q 607.000000
	r35_Ks1 1.700000
	r35_Kr1 2.000000
	r35_Ks2 0.150000
	r36_Vm 2.494750
	r36_Ks1 6.000000
	r36_Kr1 4.000000
end parameters
begin compartments
	#volume units: 
	chloroplast 3 1.0
	cytosol 3 1.0
end compartments
begin molecule types
	UDPGc()
	HePc()
	PiPic()
	GOAc()
	HeP()
	PGAc()
	UTPc()
	UDPc()
	NADH()
	PGCA()
	GCA()
	GCAc()
	DPGA()
	FBP()
	FBPc()
	ADPc()
	PeP()
	TP()
	KGc()
	GLYc()
	SBP()
	ATPc()
	RuBP()
	ADP()
	NADPH()
	Pi()
	Succ()
	HPRc()
	SERc()
	GCEAc()
	ATP()
	TPc()
	E4P()
	GLUc()
	S7P()
	SucPc()
	GCEA()
	NADP()
	Pic()
	PGA()
	F26BPc()
	NAD()
end molecule types
begin seed species
	@chloroplast:PGA() 1.44528e+21 # (2.4 * 0.001)mol/L * 6.022e23/mol *1.0L #PGA #PGA
	@chloroplast:DPGA() 6.6242e+17 #original 0.0011/ #DPGA #DPGA
	@chloroplast:TP() 3.011e+20 #original 0.5/ #TP #TP
	@chloroplast:FBP() 4.034739999999995e+20 #original 0.669999999999999/ #FBP #FBP
	@chloroplast:HeP() 1.3248400000000003e+21 #original 2.2/ #HeP #HeP
	@chloroplast:E4P() 3.0110000000000004e+19 #original 0.05/ #E4P #E4P
	@chloroplast:SBP() 1.8066e+20 #original 0.3/ #SBP #SBP
	@chloroplast:S7P() 1.2044e+21 #original 2.0/ #S7P #S7P
	@chloroplast:PeP() 1.5055e+20 #original 0.25/ #PeP #PeP
	@chloroplast:RuBP() 1.2044e+21 #original 2.0/ #RuBP #RuBP
	@chloroplast:ATP() 4.0949600000000007e+20 #original 0.68/ #ATP #ATP
	@chloroplast:ADP() -4.09496e+20 #original 0.82/ #ADP #ADP
	@chloroplast:$NADPH() 1.2646200000000002e+20 #original 0.21/ #NADPH #NADPH
	@chloroplast:Pi() -8.44591522e+21 #original 1.4749/ #Pi #Pi
	@chloroplast:PGCA() 1.74638e+18 #original 0.0029/ #PGCA #PGCA
	@chloroplast:GCA() 2.16792e+20 #original 0.36/ #GCA #GCA
	@chloroplast:GCEA() 1.0911864000000002e+20 #original 0.1812/ #GCEA #GCEA
	@chloroplast:$NADP() 1.74638e+20 #original 0.29/ #NADP #NADP
	@chloroplast:HPRc() 2.1077e+18 #original 0.0035/ #HPRc #HPRc
	@cytosol:GCAc() 2.16792e+20 #original 0.36/ #GCAc #GCAc
	@cytosol:GOAc() 1.68616e+19 #original 0.028/ #GOAc #GOAc
	@cytosol:GLYc() 1.0839600000000001e+21 #original 1.8/ #GLYc #GLYc
	@cytosol:SERc() 4.5165e+21 #original 7.5/ #SERc #SERc
	@cytosol:GCEAc() 1.0911864000000002e+20 #original 0.1812/ #GCEAc #GCEAc
	@cytosol:TPc() 1.3850600000000001e+21 #original 2.3/ #TPc #TPc
	@cytosol:FBPc() 1.2044e+21 #original 2.0/ #FBPc #FBPc
	@cytosol:HePc() 3.4927599999999997e+21 #original 5.8/ #HePc #HePc
	@cytosol:F26BPc() 4697160000000000.0 #original 7.8e-06/ #F26BPc #F26BPc
	@cytosol:UDPGc() 3.43254e+20 #original 0.57/ #UDPGc #UDPGc
	@cytosol:$UTPc() 4.5165e+20 #original 0.75/ #UTPc #UTPc
	@cytosol:UDPc() -3.43254e+20 #original 0.18/ #UDPc #UDPc
	@cytosol:$NAD() 2.4088000000000003e+20 #original 0.4/ #NAD #NAD
	@cytosol:$NADH() 2.83034e+20 #original 0.47/ #NADH #NADH
	@cytosol:$GLUc() 1.44528e+22 #original 24.0/ #GLUc #GLUc
	@cytosol:$KGc() 2.4088000000000003e+20 #original 0.4/ #KGc #KGc
	@cytosol:Pic() 0 #original 4.09998299977232/ #Pic #Pic
	@cytosol:$ATPc() 2.1077e+20 #original 0.35/ #ATPc #ATPc
	@cytosol:ADPc() 1.0 #original 0.65/ #ADPc #ADPc
	@cytosol:PiPic() 0 #original 1.40022767958214e-06/ #PiPic #PiPic
end seed species
begin observables
	Species PGA_chloroplast @chloroplast:PGA() #PGA
	Species DPGA_chloroplast @chloroplast:DPGA() #DPGA
	Species TP_chloroplast @chloroplast:TP() #TP
	Species FBP_chloroplast @chloroplast:FBP() #FBP
	Species HeP_chloroplast @chloroplast:HeP() #HeP
	Species E4P_chloroplast @chloroplast:E4P() #E4P
	Species SBP_chloroplast @chloroplast:SBP() #SBP
	Species S7P_chloroplast @chloroplast:S7P() #S7P
	Species PeP_chloroplast @chloroplast:PeP() #PeP
	Species RuBP_chloroplast @chloroplast:RuBP() #RuBP
	Species ATP_chloroplast @chloroplast:ATP() #ATP
	Species ADP_chloroplast @chloroplast:ADP() #ADP
	Species NADPH_chloroplast @chloroplast:NADPH() #NADPH
	Species Pi_chloroplast @chloroplast:Pi() #Pi
	Species PGCA_chloroplast @chloroplast:PGCA() #PGCA
	Species GCA_chloroplast @chloroplast:GCA() #GCA
	Species GCEA_chloroplast @chloroplast:GCEA() #GCEA
	Species NADP_chloroplast @chloroplast:NADP() #NADP
	Species HPRc_chloroplast @chloroplast:HPRc() #HPRc
	Species GCAc_cytosol @cytosol:GCAc() #GCAc
	Species GOAc_cytosol @cytosol:GOAc() #GOAc
	Species GLYc_cytosol @cytosol:GLYc() #GLYc
	Species SERc_cytosol @cytosol:SERc() #SERc
	Species GCEAc_cytosol @cytosol:GCEAc() #GCEAc
	Species PGAc_cytosol @cytosol:PGAc() #PGAc
	Species TPc_cytosol @cytosol:TPc() #TPc
	Species FBPc_cytosol @cytosol:FBPc() #FBPc
	Species HePc_cytosol @cytosol:HePc() #HePc
	Species F26BPc_cytosol @cytosol:F26BPc() #F26BPc
	Species UDPGc_cytosol @cytosol:UDPGc() #UDPGc
	Species SucPc_cytosol @cytosol:SucPc() #SucPc
	Species Succ_cytosol @cytosol:Succ() #Succ
	Species UTPc_cytosol @cytosol:UTPc() #UTPc
	Species UDPc_cytosol @cytosol:UDPc() #UDPc
	Species NAD_cytosol @cytosol:NAD() #NAD
	Species NADH_cytosol @cytosol:NADH() #NADH
	Species GLUc_cytosol @cytosol:GLUc() #GLUc
	Species KGc_cytosol @cytosol:KGc() #KGc
	Species Pic_cytosol @cytosol:Pic() #Pic
	Species ATPc_cytosol @cytosol:ATPc() #ATPc
	Species ADPc_cytosol @cytosol:ADPc() #ADPc
	Species PiPic_cytosol @cytosol:PiPic() #PiPic
end observables
begin functions
	PiTc_ar() = -ATPc_cytosol - 2*F26BPc_cytosol - 2*FBPc_cytosol - HePc_cytosol - PGAc_cytosol - SucPc_cytosol - TPc_cytosol - UTPc_cytosol + cPc
	Pic_ar() = 6000000*sqrt(PiTc_ar/3000000 + 1) - 6000000
	PiPic_ar() = PiTc_ar - Pic_ar
	ADPc_ar() = -ATPc_cytosol + cAc
	Wo_min() = 0.69934341936*O2_chloroplast*(-abs(1 - RuBP_chloroplast/E)/2 + 1/2 + RuBP_chloroplast/(2*E))/(19.304347826087*CO2_chloroplast + O2_chloroplast + 0.222)
	UDPc_ar() = -UDPGc_cytosol - UTPc_cytosol + cUc
	DHAPc_ar() = 0.952380952380952*TPc_cytosol
	G1Pc_ar() = 0.0391110904050875*HePc_cytosol
	Wc_min() = 2.913930914*CO2_chloroplast*(-abs(1 - RuBP_chloroplast/E)/2 + 1/2 + RuBP_chloroplast/(2*E))/(CO2_chloroplast + 0.0518018018018018*O2_chloroplast + 0.0115)
	F6Pc_ar() = 0.291178457453004*HePc_cytosol
	GAPc_ar() = 0.0476190476190476*TPc_cytosol
	G6Pc_ar() = 0.669710452141909*HePc_cytosol
	ADP_ar() = -ATP_chloroplast + cA
	F6P_ar() = 0.29125648045669*HeP_chloroplast
	Ru5P_ar() = 0.200298953662182*PeP_chloroplast
	Pi_ar() = -ATP_chloroplast - 2*DPGA_chloroplast - E4P_chloroplast - 2*FBP_chloroplast - HeP_chloroplast - PGA_chloroplast - PGCA_chloroplast - PeP_chloroplast - 2*RuBP_chloroplast - S7P_chloroplast - 2*SBP_chloroplast - TP_chloroplast + cP
	X5P_ar() = 0.298953662182362*PeP_chloroplast
	G1P_ar() = 0.0388536144929225*HeP_chloroplast
	GAP_ar() = 0.0476190476190476*TP_chloroplast
	DHAP_ar() = 0.952380952380952*TP_chloroplast
	G6P_ar() = 0.669889905050387*HeP_chloroplast
	R5P_ar() = 0.500747384155456*PeP_chloroplast
	K52a() = 35.7142857142857*F26BPc_cytosol + 0.0025
	fRate0() = Wc_min/(0.5*FBP_chloroplast + 0.285714285714286*NADPH_chloroplast + 0.0238095238095238*PGA_chloroplast + 0.0222222222222222*Pi_chloroplast + RuBP_chloroplast + 0.266666666666667*SBP_chloroplast + 0.02)
	fRate1() = 6.932384/(0.39*ADP_chloroplast*PGA_chloroplast + 0.0936*ADP_chloroplast + 0.23*ATP_chloroplast*PGA_chloroplast + 0.0552*ATP_chloroplast + 0.0897*PGA_chloroplast + 0.021528)
	fRate2() = 4.03948/(DPGA_chloroplast*NADPH_chloroplast + 0.1*DPGA_chloroplast + 0.004*NADPH_chloroplast + 0.0004)
	fRate3() = (1.21889*DHAP_chloroplast*GAP_chloroplast - 0.171674647887324*FBP_chloroplast)/(6.0*FBP_chloroplast + 0.12*(2.5*DHAP_chloroplast + 1)*(3.33333333333333*GAP_chloroplast + 1))
	fRate4() = (-1.09048048048048e-6*F6P_chloroplast*Pi_chloroplast + 0.72626*FBP_chloroplast)/(0.0471428571428571*F6P_chloroplast + FBP_chloroplast + 0.00275*Pi_chloroplast + 0.033)
	fRate5() = (-0.312207*E4P_chloroplast*X5P_chloroplast + 3.12207*F6P_chloroplast*GAP_chloroplast)/((GAP_chloroplast + 0.1)*(1.0*E4P_chloroplast + F6P_chloroplast + 1.0*X5P_chloroplast + 0.1))
	fRate6() = (1.21889*DHAP_chloroplast*E4P_chloroplast - 1.19851524090462*SBP_chloroplast)/((DHAP_chloroplast + 0.4)*(E4P_chloroplast + 0.2))
	fRate7() = 3.890292/(0.05*Pi_chloroplast + 12.0*SBP_chloroplast + 0.6)
	fRate7m() = 3.890292/(33300.0*Pi_chloroplast + 7992000.0*SBP_chloroplast + 399600.0)
	fRate8() = (3.12207*GAP_chloroplast*S7P_chloroplast - 2.65376082688041*R5P_chloroplast*X5P_chloroplast)/((S7P_chloroplast + 0.46)*(GAP_chloroplast + 0.048*R5P_chloroplast + 0.72*X5P_chloroplast + 0.072))
	fRate9() = (-0.00158264680105171*ADP_chloroplast*RuBP_chloroplast + 10.8348*ATP_chloroplast*Ru5P_chloroplast)/((0.1475*ADP_chloroplast + ATP_chloroplast*(0.4*ADP_chloroplast + 1) + 0.059)*(0.025*PGA_chloroplast + 0.0125*Pi_chloroplast + Ru5P_chloroplast + 0.0714285714285714*RuBP_chloroplast + 0.05))
	fRate10() = 4.5/(0.3*ADP_chloroplast*Pi_chloroplast + 0.09*ADP_chloroplast + 0.0042*ATP_chloroplast + 0.0042*Pi_chloroplast + 0.00126)
	fRate10m() = 4.5/(1.7202*ADP_chloroplast*Pi_chloroplast + 0.51606*ADP_chloroplast + 0.0240828*ATP_chloroplast + 0.0240828*Pi_chloroplast + 0.00722484)
	fRate11() = 0.266843*ATP_chloroplast*G1P_chloroplast/((0.1*ADP_chloroplast + 1)*(G1P_chloroplast + 0.08)*(ATP_chloroplast + 0.0064*Pi_chloroplast/(0.02*F6P_chloroplast + 0.02*FBP_chloroplast + 0.1*PGA_chloroplast) + 0.08))
	fRate12() = 0.0045235453725*Pic_cytosol/(0.0118125*DHAP_chloroplast*Pic_cytosol + 0.00874125*DHAP_chloroplast + 0.0121275*GAP_chloroplast*Pic_cytosol + 0.00897435*GAP_chloroplast + 0.002692305*PGA_chloroplast + 0.00144375*Pi_chloroplast*Pic_cytosol + 0.001068375*Pi_chloroplast + 0.00363825*Pic_cytosol*(PGA_chloroplast + 0.25))
	fRate13() = 1.24333*GAP_chloroplast/(GAP_chloroplast*(1 + 0.74/Pic_cytosol) + 0.075*(1 + 0.74/Pic_cytosol)*(12.987012987013*DHAP_chloroplast + 4.0*PGA_chloroplast + 1.58730158730159*Pi_chloroplast) + 0.075)
	fRate14() = 1.24333*DHAP_chloroplast/(DHAP_chloroplast*(1 + 0.74/Pic_cytosol) + 0.077*(1 + 0.74/Pic_cytosol)*(13.3333333333333*GAP_chloroplast + 4.0*PGA_chloroplast + 1.58730158730159*Pi_chloroplast) + 0.077)
	fRate15() = (0.107377*DHAPc_cytosol*GAPc_cytosol - 0.00894808333333333*FBPc_cytosol)/(6.0*FBPc_cytosol + 0.12*(2.5*DHAPc_cytosol + 1)*(3.33333333333333*GAPc_cytosol + 1))
	fRate16() = (-9.60213117214468e-6*F6Pc_cytosol*Pic_cytosol + 0.063979*FBPc_cytosol)/(K52a*(FBPc_cytosol/K52a + (1.42857142857143*F6Pc_cytosol + 1)*(0.0833333333333333*Pic_cytosol + 1)))
	fRate17() = (0.115403*G1Pc_cytosol*UTPc_cytosol - 0.372267741935484*PiPic_cytosol*UDPGc_cytosol)/(0.014*(7.14285714285714*G1Pc_cytosol + 1)*(10.0*UTPc_cytosol + 1) + 0.014*(9.09090909090909*PiPic_cytosol + 1)*(8.33333333333333*UDPGc_cytosol + 1) - 0.014)
	fRate18() = (0.0555034*F6Pc_cytosol*UDPGc_cytosol - 0.00555034*SucPc_cytosol*UDPc_cytosol)/((UDPGc_cytosol + (0.0909090909090909*Pic_cytosol + 1)*(2.5*SucPc_cytosol + 1)*(0.02*Succ_cytosol + 1)*(3.42857142857143*UDPc_cytosol + 2.4))*(F6Pc_cytosol + 1.0*FBPc_cytosol + 0.8))
	fRate19() = 44.40272/(80.0*SucPc_cytosol + 0.35*Succ_cytosol + 28.0)
	fRate19m() = 44.40272/(62400.0*SucPc_cytosol + 273.0*Succ_cytosol + 21840.0)
	fRate20() = (-0.000171042372881356*ADPc_cytosol*F26BPc_cytosol + 0.100915*ATPc_cytosol*F6Pc_cytosol)/((F6Pc_cytosol + (0.714285714285714*DHAPc_cytosol + 0.5)*(47.6190476190476*F26BPc_cytosol + 1))*(3.125*ADPc_cytosol + ATPc_cytosol + 0.5))
	fRate21() = 0.00084096/((F26BPc_cytosol + 0.032)*(F6Pc_cytosol*Pic_cytosol + 0.5*F6Pc_cytosol + 0.1*Pic_cytosol + 0.05))
	fRate22() = 2.0/(Succ_cytosol + 5.0)
	fRate23() = 0.5/(PGAc_cytosol + 1.0)
	fRate24() = 1.4/(0.39*GCAc_cytosol + 0.28*GCEAc_cytosol + 0.1092)
	fRate25() = 1.4/(0.39*GCA_chloroplast + 0.28*GCEA_chloroplast + 0.1092)
	fRate26() = 1.32/(0.22*GCA_chloroplast + 0.2*GCEA_chloroplast + 0.044)
	fRate27() = 1.32/(0.22*GCAc_cytosol + 0.2*GCEAc_cytosol + 0.044)
	fRate28() = Wo_min/(0.5*FBP_chloroplast + 0.285714285714286*NADPH_chloroplast + 0.0238095238095238*PGA_chloroplast + 0.0222222222222222*Pi_chloroplast + RuBP_chloroplast + 0.266666666666667*SBP_chloroplast + 0.02)
	fRate29() = 12565.05003/(0.026*GCA_chloroplast*Pi_chloroplast + 0.0663*GCA_chloroplast + 239.7*PGCA_chloroplast + 2.444*Pi_chloroplast + 6.2322)
	fRate30() = 2.0576844/(0.36*ATP_chloroplast*GCEA_chloroplast + 0.09*ATP_chloroplast + 0.21*GCEA_chloroplast*PGA_chloroplast + 0.0756*GCEA_chloroplast + 0.0525*PGA_chloroplast + 0.0189)
	fRate30m() = 2.0576844/(108.0*ATP_chloroplast*GCEA_chloroplast + 27.0*ATP_chloroplast + 63.0*GCEA_chloroplast*PGA_chloroplast + 22.68*GCEA_chloroplast + 15.75*PGA_chloroplast + 5.67)
	fRate31() = 1.45611/(GCAc_cytosol + 0.1)
	fRate32() = 109.10427/(2.7*GLYc_cytosol*GOAc_cytosol + 0.405*GLYc_cytosol + 33.0*GOAc_cytosol*SERc_cytosol + 89.1*GOAc_cytosol + 4.95*SERc_cytosol + 13.365)
	fRate32m() = 109.10427/(0.648*GLYc_cytosol*GOAc_cytosol + 0.0972*GLYc_cytosol + 7.92*GOAc_cytosol*SERc_cytosol + 21.384*GOAc_cytosol + 1.188*SERc_cytosol + 3.2076)
	fRate33() = 120.1176/(12.09*HPRc_chloroplast + 1.08)
	fRate33m() = 120.1176/(3022500.0*HPRc_chloroplast + 270000.0)
	fRate34() = 5.49164/(2.0*GLUc_cytosol*GOAc_cytosol + 0.3*GLUc_cytosol + 1.7*GLYc_cytosol*GOAc_cytosol + 0.255*GLYc_cytosol + 3.4*GOAc_cytosol + 0.51)
	fRate34m() = 5.49164/(1214.0*GLUc_cytosol*GOAc_cytosol + 182.1*GLUc_cytosol + 1031.9*GLYc_cytosol*GOAc_cytosol + 154.785*GLYc_cytosol + 2063.8*GOAc_cytosol + 309.57)
	fRate35() = 2.49475*GLYc_cytosol/(GLYc_cytosol + 1.5*SERc_cytosol + 6.0)
end functions
begin reaction rules
	RuBisCO_CO2: RuBP()@chloroplast -> PGA()@chloroplast + PGA()@chloroplast fRate0() #Modifiers(PGA, FBP, SBP, Pi, NADPH)
	PGA_K: PGA()@chloroplast + ATP()@chloroplast -> DPGA()@chloroplast + ADP()@chloroplast fRate1() #Modifiers(ADP)
	GAP_DH: DPGA()@chloroplast + NADPH()@chloroplast -> TP()@chloroplast + NADP()@chloroplast fRate2() #Modifiers(GAP)
	FBP_A_reactants_0: 0  -> TP()@chloroplast -1*2.0*(fRate3()) #Modifiers(GAP, DHAP)
	FBP_A_products_0: 0  -> FBP()@chloroplast fRate3() #Modifiers(GAP, DHAP)
	FBPase_reactants_0: 0  -> FBP()@chloroplast -1*(fRate4()) #Modifiers(F6P, Pi)
	FBPase_products_0: 0  -> HeP()@chloroplast fRate4() #Modifiers(F6P, Pi)
	FBPase_products_1: 0  -> Pi()@chloroplast fRate4() #Modifiers(F6P, Pi)
	F6P_TK_reactants_0: 0  -> HeP()@chloroplast -1*(fRate5()) #Modifiers(F6P, GAP, X5P, E4P)
	F6P_TK_reactants_1: 0  -> TP()@chloroplast -1*(fRate5()) #Modifiers(F6P, GAP, X5P, E4P)
	F6P_TK_products_0: 0  -> E4P()@chloroplast fRate5() #Modifiers(F6P, GAP, X5P, E4P)
	F6P_TK_products_1: 0  -> PeP()@chloroplast fRate5() #Modifiers(F6P, GAP, X5P, E4P)
	SBP_A_reactants_0: 0  -> TP()@chloroplast -1*(fRate6()) #Modifiers(DHAP)
	SBP_A_reactants_1: 0  -> E4P()@chloroplast -1*(fRate6()) #Modifiers(DHAP)
	SBP_A_products_0: 0  -> SBP()@chloroplast fRate6() #Modifiers(DHAP)
	SBPase: SBP()@chloroplast <-> S7P()@chloroplast + Pi()@chloroplast fRate7(),fRate7m() #Modifiers(Pi)
	S7P_TK_reactants_0: 0  -> TP()@chloroplast -1*(fRate8()) #Modifiers(GAP, X5P, R5P)
	S7P_TK_reactants_1: 0  -> S7P()@chloroplast -1*(fRate8()) #Modifiers(GAP, X5P, R5P)
	S7P_TK_products_0: 0  -> PeP()@chloroplast 2.0*fRate8() #Modifiers(GAP, X5P, R5P)
	Ru5P_K_reactants_0: 0  -> PeP()@chloroplast -1*(fRate9()) #Modifiers(Ru5P, PGA, RuBP, Pi, ADP)
	Ru5P_K_reactants_1: 0  -> ATP()@chloroplast -1*(fRate9()) #Modifiers(Ru5P, PGA, RuBP, Pi, ADP)
	Ru5P_K_products_0: 0  -> RuBP()@chloroplast fRate9() #Modifiers(Ru5P, PGA, RuBP, Pi, ADP)
	Ru5P_K_products_1: 0  -> ADP()@chloroplast fRate9() #Modifiers(Ru5P, PGA, RuBP, Pi, ADP)
	ATP_S: ADP()@chloroplast + Pi()@chloroplast <-> ATP()@chloroplast fRate10(),fRate10m()
	AGPase_reactants_0: 0  -> HeP()@chloroplast -1*(fRate11()) #Modifiers(G1P, ADP, Pi, PGA, F6P, FBP)
	AGPase_reactants_1: 0  -> ATP()@chloroplast -1*(fRate11()) #Modifiers(G1P, ADP, Pi, PGA, F6P, FBP)
	TPT_PGA: PGA()@chloroplast -> PGAc()@cytosol fRate12() #Modifiers(Pic, Pi, GAP, DHAP)
	TPT_GAP_reactants_0: 0  -> TP()@chloroplast -1*(fRate13()) #Modifiers(GAP, GAPc, Pic, Pi, PGA, DHAP)
	TPT_GAP_products_0: 0  -> TPc()@cytosol fRate13() #Modifiers(GAP, GAPc, Pic, Pi, PGA, DHAP)
	TPT_DHAP_reactants_0: 0  -> TP()@chloroplast -1*(fRate14()) #Modifiers(DHAP, DHAPc, Pic, Pi, PGA, GAP)
	TPT_DHAP_products_0: 0  -> TPc()@cytosol fRate14() #Modifiers(DHAP, DHAPc, Pic, Pi, PGA, GAP)
	FBPc_A_reactants_0: 0  -> TPc()@cytosol -1*2.0*(fRate15()) #Modifiers(GAPc, DHAPc)
	FBPc_A_products_0: 0  -> FBPc()@cytosol fRate15() #Modifiers(GAPc, DHAPc)
	FBPcase_reactants_0: 0  -> FBPc()@cytosol -1*(fRate16()) #Modifiers(F6Pc)
	FBPcase_products_0: 0  -> HePc()@cytosol fRate16() #Modifiers(F6Pc)
	FBPcase_products_1: 0  -> Pic()@cytosol fRate16() #Modifiers(F6Pc)
	UGPase_reactants_0: 0  -> HePc()@cytosol -1*(fRate17()) #Modifiers(G1Pc)
	UGPase_reactants_1: 0  -> UTPc()@cytosol -1*(fRate17()) #Modifiers(G1Pc)
	UGPase_products_0: 0  -> UDPGc()@cytosol fRate17() #Modifiers(G1Pc)
	UGPase_products_1: 0  -> PiPic()@cytosol fRate17() #Modifiers(G1Pc)
	SucPc_S_reactants_0: 0  -> HePc()@cytosol -1*(fRate18()) #Modifiers(F6Pc, FBPc, UDPc, SucPc, Succ, Pic)
	SucPc_S_reactants_1: 0  -> UDPGc()@cytosol -1*(fRate18()) #Modifiers(F6Pc, FBPc, UDPc, SucPc, Succ, Pic)
	SucPc_S_products_0: 0  -> SucPc()@cytosol fRate18() #Modifiers(F6Pc, FBPc, UDPc, SucPc, Succ, Pic)
	SucPc_S_products_1: 0  -> UDPc()@cytosol fRate18() #Modifiers(F6Pc, FBPc, UDPc, SucPc, Succ, Pic)
	SucPc_P: SucPc()@cytosol <-> Succ()@cytosol + Pic()@cytosol fRate19(),fRate19m() #Modifiers(Succ)
	F6Pc_K_reactants_0: 0  -> HePc()@cytosol -1*(fRate20()) #Modifiers(F6Pc, F26BPc, DHAPc, ADPc)
	F6Pc_K_reactants_1: 0  -> ATPc()@cytosol -1*(fRate20()) #Modifiers(F6Pc, F26BPc, DHAPc, ADPc)
	F6Pc_K_products_0: 0  -> F26BPc()@cytosol fRate20() #Modifiers(F6Pc, F26BPc, DHAPc, ADPc)
	F6Pc_K_products_1: 0  -> ADPc()@cytosol fRate20() #Modifiers(F6Pc, F26BPc, DHAPc, ADPc)
	F26BPc_P: F26BPc()@cytosol -> HePc()@cytosol + Pic()@cytosol fRate21() #Modifiers(Pic, F6Pc)
	Succ_Deg: Succ()@cytosol -> 0  fRate22()
	PGAc_Deg: PGAc()@cytosol -> 0  fRate23()
	GPT_GCEAc: GCEAc()@cytosol -> GCEA()@chloroplast fRate24() #Modifiers(GCAc)
	GPT_GCEA: GCEA()@chloroplast -> GCEAc()@cytosol fRate25() #Modifiers(GCA)
	GPT_GCA: GCA()@chloroplast -> GCAc()@cytosol fRate26() #Modifiers(GCEA)
	GPT_GCAc: GCAc()@cytosol -> GCA()@chloroplast fRate27() #Modifiers(GCEAc)
	RuBisCO_O2: RuBP()@chloroplast -> PGA()@chloroplast + PGCA()@chloroplast fRate28() #Modifiers(PGA, FBP, SBP, Pi, NADPH)
	PGCA_P: PGCA()@chloroplast -> GCA()@chloroplast fRate29() #Modifiers(GCA, Pi)
	GCEA_K: ATP()@chloroplast + GCEA()@chloroplast <-> PGA()@chloroplast + ADP()@chloroplast fRate30(),fRate30m() #Modifiers(PGA)
	GCAc_Ox: GCAc()@cytosol -> GOAc()@cytosol fRate31()
	SERcGOAc_AT: SERc()@cytosol + GOAc()@cytosol <-> HPRc()@chloroplast + GLYc()@cytosol fRate32(),fRate32m() #Modifiers(GLYc)
	GCEA_DH: HPRc()@chloroplast + NADH()@cytosol <-> GCEAc()@cytosol + NAD()@cytosol fRate33(),fRate33m() #Modifiers(HPRc)
	GLUcGOAc_AT: GLUc()@cytosol + GOAc()@cytosol <-> KGc()@cytosol + GLYc()@cytosol fRate34(),fRate34m() #Modifiers(GLYc)
	GLYc_DC_reactants_0: 0  -> GLYc()@cytosol -1*2.0*(fRate35()) #Modifiers(SERc)
	GLYc_DC_products_0: 0  -> SERc()@cytosol fRate35() #Modifiers(SERc)
end reaction rules
end model
