###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL6929313478', 'http://identifiers.org/biomodels.db/BIOMD0000000404']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/8334303']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/562']
#@BQB_IS_VERSION_OF:['http://identifiers.org/kegg.pathway/map02030', 'http://identifiers.org/obo.go/GO:0006935']
#@creatorEmail:'lenov@ebi.ac.uk'
#@creatorName:'Le Novère Nicolas'
#@notes:'This is a plain translation of an SBML model created on 14/08/2021. The original model has 29 molecules and 35 reactions. The translated model has 28 molecules and 35 rules'
###
begin model
begin parameters
	alpha 0.14
	kappa 2.25e-07
	ka 0.1
	parameter_1 1e-07
	parameter_3 0.0003
	ATP 6.022000000000001e+22 #original 0.1mol/L
	r1_kcat 0.001000
	r2_kcat 75000.000000
	r3_kcat 200000.000000
	r4_k1 100000000.000000
	r5_k1 200000.000000
	r6_kcat 0.000000
	r7_k1 0.037000
	r8_k1 500000.000000
	r9_k1 1000000.000000
	r10_k1 1.000000
	r11_k1 1000000.000000
	r11_k2 1.000000
	r12_k1 1000.000000
	r12_k2 1.000000
	r13_k1 100000.000000
	r13_k2 1.000000
	r14_k1 10000.000000
	r14_k2 1.000000
	r15_k1 100000.000000
	r15_k2 1.000000
	r16_k1 400000.000000
	r16_k2 1.000000
	r17_k1 400000.000000
	r17_k2 1.000000
	r18_k1 400000.000000
	r18_k2 1.000000
	r19_k1 100000.000000
	r19_k2 1.000000
	r20_k1 10000.000000
	r20_k2 1.000000
	r21_k1 400000.000000
	r21_k2 1.000000
	r22_k1 400000.000000
	r22_k2 1.000000
	r23_k1 400000.000000
	r23_k2 1.000000
	r24_k1 0.100000
	r24_k2 1.000000
	r25_k1 0.010000
	r25_k2 1.000000
	r26_k1 0.400000
	r26_k2 1.000000
	r27_k1 0.400000
	r27_k2 1.000000
	r28_k1 0.400000
	r28_k2 1.000000
	r33_k1 1000000.000000
	r33_k2 1.000000
	r34_k1 1000000.000000
	r34_k2 1.000000
	r35_k1 1000000.000000
	r35_k2 1.000000
end parameters
begin molecule types
	Z()
	T()
	Tni_WA()
	Yp()
	Ap()
	Tni()
	Y()
	Tasp_WA()
	W()
	TW()
	Tni_W()
	Tasp_W()
	Tasp()
	asp()
	TWA()
	MYpYpYp()
	MYpYp()
	WA()
	MYp()
	B()
	M()
	Bp()
	Tni_A()
	MYpYpYpYp()
	TA()
	A()
	Tasp_A()
	ni()
end molecule types
begin seed species
	T() 1.8788640000000003e+18 # 3.12e-06mol/L * 6.022e23/mol *1.0L #T #T
	W() 1.740358e+18 #original 2.89e-06mol/L #W #W
	TW() 3.5590020000000006e+17 #original 5.91e-07mol/L #TW #TW
	TA() 2.673768e+17 #original 4.44e-07mol/L #TA #TA
	WA() 4.082916e+17 #original 6.78e-07mol/L #WA #WA
	TWA() 5.100634e+17 #original 8.47e-07mol/L #TWA #TWA
	A() 1.8066e+18 #original 3e-06mol/L #A #A
	Ap() 2.095656e+16 #original 3.48e-08mol/L #Ap #Ap
	B() 1.1622460000000003e+18 #original 1.93e-06mol/L #B #B
	Bp() 4.137114e+16 #original 6.87e-08mol/L #Bp #Bp
	Z() 1.2044000000000002e+19 #original 2e-05mol/L #Z #Z
	Y() 5.96178e+18 #original 9.9e-06mol/L #Y #Y
	Yp() 4215400000000000.0 #original 7e-09mol/L #Yp #Yp
	M() 3757728000000000.0 #original 6.24e-09mol/L #M #M
	MYp() 467909400000000.0 #original 7.77e-10mol/L #MYp #MYp
	MYpYp() 180057800000000.0 #original 2.99e-10mol/L #MYpYp #MYpYp
	MYpYpYp() 227631600000000.0 #original 3.78e-10mol/L #MYpYpYp #MYpYpYp
	MYpYpYpYp() 1391082000000000.0 #original 2.31e-09mol/L #MYpYpYpYp #MYpYpYpYp
end seed species
begin observables
	Species asp asp() #asp
	Species ni ni() #ni
	Species T T() #T
	Species Tasp Tasp() #Tasp
	Species Tni Tni() #Tni
	Species W W() #W
	Species TW TW() #TW
	Species Tasp_W Tasp_W() #Tasp_W
	Species Tni_W Tni_W() #Tni_W
	Species TA TA() #TA
	Species Tasp_A Tasp_A() #Tasp_A
	Species Tni_A Tni_A() #Tni_A
	Species WA WA() #WA
	Species TWA TWA() #TWA
	Species Tasp_WA Tasp_WA() #Tasp_WA
	Species Tni_WA Tni_WA() #Tni_WA
	Species A A() #A
	Species Ap Ap() #Ap
	Species B B() #B
	Species Bp Bp() #Bp
	Species Z Z() #Z
	Species Y Y() #Y
	Species Yp Yp() #Yp
	Species M M() #M
	Species MYp MYp() #MYp
	Species MYpYp MYpYp() #MYpYp
	Species MYpYpYp MYpYpYp() #MYpYpYp
	Species MYpYpYpYp MYpYpYpYp() #MYpYpYpYp
end observables
begin functions
	parameter_2() = ATP/(ATP + parameter_3)
	Bias() = (M + MYp)/(M + MYp + MYpYp + MYpYpYp + MYpYpYpYp)
	fRate0() = 0.001*parameter_2
	fRate1() = 75000.0*TWA*parameter_2
	fRate2() = 200000.0*Tni_WA*parameter_2
	fRate5() = 0
	fRate28m() = 0.25*ka*kappa
	fRate29m() = 0.666666666666667*alpha*ka*kappa
	fRate30m() = 1.5*alpha^2*ka*kappa
	fRate31m() = 4.0*alpha^3*ka*kappa
end functions
begin reaction rules
	phosphorylation_r1: A() -> Ap() fRate0()
	phosphorylation_r2: A() -> Ap() fRate1() #Modifiers(TWA)
	phosphorylation_r3: A() -> Ap() fRate2() #Modifiers(Tni_WA)
	phosphorylation_r4: Tasp_WA() + Yp() -> Tasp_WA() + Y() r4_k1
	phosphorylation_r5: Ap() + Y() -> A() + Yp() r5_k1
	phosphorylation_r6: Y() -> Yp() fRate5()
	phosphorylation_r7: Yp() -> Y() r7_k1
	phosphorylation_r8: Yp() + Z() -> Y() + Z() r8_k1
	phosphorylation_r9: Ap() + B() -> A() + Bp() r9_k1
	phosphorylation_r10: Bp() -> B() r10_k1
	regulatory_r1: T() + asp() <-> Tasp() r11_k1,r11_k2
	regulatory_r2: T() + ni() <-> Tni() r12_k1,r12_k2
	regulatory_r3: T() + W() <-> TW() r13_k1,r13_k2
	regulatory_r4: T() + A() <-> TA() r14_k1,r14_k2
	regulatory_r5: W() + A() <-> WA() r15_k1,r15_k2
	regulatory_r6: TW() + A() <-> TWA() r16_k1,r16_k2
	regulatory_r7: TA() + W() <-> TWA() r17_k1,r17_k2
	regulatory_r8: T() + WA() <-> TWA() r18_k1,r18_k2
	regulatory_r9: Tasp() + W() <-> Tasp_W() r19_k1,r19_k2
	regulatory_r10: Tasp() + A() <-> Tasp_A() r20_k1,r20_k2
	regulatory_r11: Tasp_W() + A() <-> Tasp_WA() r21_k1,r21_k2
	regulatory_r12: Tasp_A() + W() <-> Tasp_WA() r22_k1,r22_k2
	regulatory_r13: Tasp() + WA() <-> Tasp_WA() r23_k1,r23_k2
	regulatory_r14: Tni() + W() <-> Tni_W() r24_k1,r24_k2
	regulatory_r15: Tni() + A() <-> Tni_A() r25_k1,r25_k2
	regulatory_r16: Tni_W() + A() <-> Tni_WA() r26_k1,r26_k2
	regulatory_r17: Tni_A() + W() <-> Tni_WA() r27_k1,r27_k2
	regulatory_r18: Tni() + WA() <-> Tni_WA() r28_k1,r28_k2
	motor_r1: M() + Yp() <-> MYp() ka,fRate28m()
	motor_r2: MYp() + Yp() <-> MYpYp() ka,fRate29m()
	motor_r3: MYpYp() + Yp() <-> MYpYpYp() ka,fRate30m()
	motor_r4: MYpYpYp() + Yp() <-> MYpYpYpYp() ka,fRate31m()
	reaction_1: TA() + asp() <-> Tasp_A() r33_k1,r33_k2
	reaction_2: TW() + asp() <-> Tasp_W() r34_k1,r34_k2
	reaction_3: TWA() + asp() <-> Tasp_WA() r35_k1,r35_k2
end reaction rules
end model
