###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000423', 'http://identifiers.org/biomodels.db/MODEL1207270000']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/22248283']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/biomodels.db/BIOMD0000000343']
#@BQB_IS_VERSION_OF:['http://identifiers.org/obo.go/GO:0008286']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/39107', 'http://identifiers.org/obo.bto/BTO:0000443']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is a plain translation of an SBML model created on 14/08/2021. The original model has 9 molecules and 11 reactions. The translated model has 9 molecules and 14 rules'
###
begin model
begin parameters
	k1a 0.153418
	k1aBasic 0.0383389
	k1b 3.4699e-06
	k1c 0.574266
	k1d 4.78844
	k1e 5.25027e-05
	k1f 119.353
	k1g 4.14899
	k1r 37954.7
	k21 538004.0
	k22 1.7252e-06
	km2 262759.0
	km23 88.9096
	k3 8.62917e-05
	km3 0.132671
	ins 100.0
end parameters
begin molecule types
	IRi()
	IRiP()
	X()
	IR()
	IRS()
	IRins()
	IRSiP()
	IRp()
	Xp()
end molecule types
begin seed species
	IR() 5.38407507234151e+24 # 8.94067597532632mol/L * 6.022e23/mol *1.0L #IR #IR
	IRins() 3.594471352045561e+23 #original 0.59688996214639mol/L #IRins #IRins
	IRp() 2.309593121796527e+22 #original 0.0383525925240207mol/L #IRp #IRp
	IRiP() 2.5537894768404187e+23 #original 0.424076631823384mol/L #IRiP #IRiP
	IRi() 2.9138283501477775e+18 #original 4.83863890758515e-06mol/L #IRi #IRi
	IRS() 5.684757125626226e+24 #original 9.43998194225544mol/L #IRS #IRS
	IRSiP() 3.372428743737819e+23 #original 0.560018057744573mol/L #IRSiP #IRSiP
	X() 6.019807307943864e+24 #original 9.99635886407151mol/L #X #X
	Xp() 2.1926920561329806e+21 #original 0.00364113592848386mol/L #Xp #Xp
end seed species
begin observables
	Species IR IR() #IR
	Species IRins IRins() #IRins
	Species IRp IRp() #IRp
	Species IRiP IRiP() #IRiP
	Species IRi IRi() #IRi
	Species IRS IRS() #IRS
	Species IRSiP IRSiP() #IRSiP
	Species X X() #X
	Species Xp Xp() #Xp
end observables
begin functions
	IRmem() = IR + IRins + IRp
	measIRp() = IRiP + IRp
	measIRS1() = IRSiP
	fRate0() = IR*ins*k1a + IR*k1aBasic
	fRate4() = IRiP*(Xp*k1f/(Xp + 1) + k1e)
	fRate7() = IRS*k21*(IRiP*k22 + IRp)/(Xp*km23 + 1)
	fRate9() = IRSiP*k3
end functions
begin reaction rules
	v1a_reactants_0: 0  -> IR() -1*(fRate0())
	v1a_products_0: 0  -> IRins() fRate0()
	v1b: IRins() -> IR() k1b
	v1c: IRins() -> IRp() k1c
	v1d: IRp() -> IRiP() k1d
	v1e_reactants_0: 0  -> IRiP() -1*(fRate4()) #Modifiers(Xp)
	v1e_products_0: 0  -> IRi() fRate4() #Modifiers(Xp)
	v1g: IRp() -> IR() k1g
	v1r: IRi() -> IR() k1r
	v2_reactants_0: 0  -> IRS() -1*(fRate7()) #Modifiers(IRiP, IRp, Xp)
	v2_products_0: 0  -> IRSiP() fRate7() #Modifiers(IRiP, IRp, Xp)
	vm2: IRSiP() -> IRS() km2
	v3: X() -> Xp() fRate9() #Modifiers(IRSiP)
	vm3: Xp() -> X() km3
end reaction rules
end model
