###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000424', 'http://identifiers.org/biomodels.db/MODEL1108180000']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/19638581']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/biomodels.db/BIOMD0000000146', 'http://identifiers.org/biomodels.db/BIOMD0000000048']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0014065', 'http://identifiers.org/go/GO:0042493']
#@BQB_OCCURS_IN:['http://identifiers.org/bto/BTO:0000356']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046', 'http://identifiers.org/doid/DOID:162']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is a plain translation of an SBML model created on 13/08/2021. The original model has 55 molecules and 58 reactions. The translated model has 55 molecules and 59 rules'
###
begin model
begin parameters
	scal 1.0
	scall 0.6
	scalll 30.0
	tE3P_max 65.0
	tERKP_max 10.0
	pAkt_max 91.0
	PI0 70.0
	Akt0 10.0
	k1 0.005
	Kd_1 600.0
	k2 10.0
	Kd_2 10.0
	k51 0.01
	k53 0.01
	k3 1.0
	Kd_3 0.1
	V4 10.0
	K4 50.0
	k5 0.06
	Kd_5 1.0
	k6 12.0
	k_6 3.0
	k7 36.0
	Kd_7 9.0
	k8 12.0
	Kd_8 0.1
	k9 35.0
	V10 0.0154
	K10 340.0
	k27 3.0
	Kd_27 1.0
	k28 300.0
	k29 13520.0
	V30 900.0
	k11 6.0
	K11 0.18
	V12 3.0
	K12 0.1
	k13 1.0
	K13 11.7
	k14 0.6
	K14 50.0
	E_raf 7.0
	k15 2.1
	K15 1.0
	k16 0.06
	Kd_16 1.0
	k16_kat 0.6
	k18 0.6
	k22 0.06
	k23 1.2
	K23 10.0
	V24 1.8
	K24 10.0
	k31 0.03
	K_d31 100.0
	k55 30.0
	k56 30.0
	k32 8000.0
	Kd_32 0.01
	k33 15.0
	k34 3.6
	V35 150.0
	K35 2.0
	k36 1.0
	Kd_36 2.2
	k37 150.0
	k38 150.0
	k39 15000.0
	Kd_39 20.0
	V40 15000.0
	K40 0.1
	k41 3.0
	Kd_41 0.1
	k42 45.0
	k43 30.0
	k47 0.3
	k48 0.001
	k49 0.003
	Kd_49 20000.0
	k50 0.6
	k_50 0.012
	k57 100.0
	Kd_57 10.0
	k58 100.0
	Kd_58 80.0
	Pool_1_ 2900.0
	Pool_2_ -2920.0
	Pool_3_ 200.0
	Pool_4_ 50.0
	Pool_5_ 300.0
	Pool_7_ 10.0
	Pool_8_ 100.0
	Pool_9_ 10.0
	Pool_10_ 10.0
	Pool_11_ 100.0
	Pool_12_ 120.0
	Pool_13_ 100.0
	Pool_14_ 100.0
	mu 0
	E3_0 0
	bpV 0
	LY 0
	PI3K_CY 0
	k_9 0
	k_28 0
	k_29 0
	sens 0
	Pool_6_ 0
end parameters
begin molecule types
	E23HP_PI3Ka()
	PTEN_PTEN()
	PTEN_PIP3()
	PTEN()
	PI2()
	ShcP()
	E3H()
	ERKPP()
	HRG()
	PI3Ka_PI()
	PTEN_PI()
	MEKPP()
	MEK_PP2A()
	PI3Ka()
	PTENP()
	RasGTP()
	E23HP_ShGS()
	PIP3()
	E23HP()
	GS()
	PP2A()
	RasGDP()
	MEKP()
	PI3K_LY()
	PI3Ka_PIP3()
	ShGS()
	MEKPP_PP2A()
	Raf()
	PI3K()
	Akt_PIP3()
	E2Per()
	E23HP_ShcP()
	Akt_PI_PP_PP2A()
	E23H_C()
	Akt_PIP3_PP2A()
	MEK()
	E3()
	Shc()
	ERKP()
	Akt()
	Rafa()
	E2_Per()
	Akt_PI_PP()
	Akt_PI_P()
	Per()
	E3H_C()
	PTEN_bpV()
	Akt_PI_P_PP2A()
	E2()
	PTENP_PTEN()
	MEKP_PP2A()
	E23H()
	E23HP_PI3K()
	E23HP_Shc()
	ERK()
end molecule types
begin seed species
	E3() 4.8176e+25 # 80.0mol/L * 6.022e23/mol *1.0L #E3 #E3
	E2() 6.022e+25 #original 100.0mol/L #E2 #E2
	Shc() 6.022e+25 #original 100.0mol/L #Shc #Shc
	GS() 6.022e+25 #original 100.0mol/L #GS #GS
	RasGDP() 7.2264000000000005e+25 #original 120.0mol/L #RasGDP #RasGDP
	Raf() 6.022e+25 #original 100.0mol/L #Raf #Raf
	MEK() 6.022e+24 #original 10.0mol/L #MEK #MEK
	PP2A() 6.022e+24 #original 10.0mol/L #PP2A #PP2A
	ERK() 6.022e+24 #original 10.0mol/L #ERK #ERK
	PI3K() 1.2044e+26 #original 200.0mol/L #PI3K #PI3K
	PI2() 1.8066e+26 #original 300.0mol/L #PI2 #PI2
	PTEN() 2.576199556e+25 #original 42.7798mol/L #PTEN #PTEN
	PIP3() 4852358984000.0 #original 8.05772e-12mol/L #PIP3 #PIP3
	PTEN_PIP3() 1.894244188e+16 #original 3.14554e-08mol/L #PTEN_PIP3 #PTEN_PIP3
	PTEN_PI() 3.028548108e+16 #original 5.02914e-08mol/L #PTEN_PI #PTEN_PI
	PTENP() 2.04678747e+24 #original 3.39885mol/L #PTENP #PTENP
	PTENP_PTEN() 5.753039414e+23 #original 0.955337mol/L #PTENP_PTEN #PTENP_PTEN
	Akt() 6.022e+25 #original 100.0mol/L #Akt #Akt
	PTEN_PTEN() 5.753039414e+23 #original 0.955337mol/L #PTEN_PTEN #PTEN_PTEN
	HRG() 1.8066e+27 #original 3000.0mol/L #HRG #HRG
end seed species
begin observables
	Species E3 E3() #E3
	Species PI3K_LY PI3K_LY() #PI3K_LY
	Species E3H E3H() #E3H
	Species E2 E2() #E2
	Species E23H E23H() #E23H
	Species E23HP E23HP() #E23HP
	Species Shc Shc() #Shc
	Species E23HP_Shc E23HP_Shc() #E23HP_Shc
	Species E23HP_ShcP E23HP_ShcP() #E23HP_ShcP
	Species GS GS() #GS
	Species E23HP_ShGS E23HP_ShGS() #E23HP_ShGS
	Species E2_Per E2_Per() #E2_Per
	Species PTEN_bpV PTEN_bpV() #PTEN_bpV
	Species RasGDP RasGDP() #RasGDP
	Species PI3Ka_PIP3 PI3Ka_PIP3() #PI3Ka_PIP3
	Species Raf Raf() #Raf
	Species E23H_C E23H_C() #E23H_C
	Species MEK MEK() #MEK
	Species MEKP MEKP() #MEKP
	Species PP2A PP2A() #PP2A
	Species MEKP_PP2A MEKP_PP2A() #MEKP_PP2A
	Species MEK_PP2A MEK_PP2A() #MEK_PP2A
	Species Akt_PIP3_PP2A Akt_PIP3_PP2A() #Akt_PIP3_PP2A
	Species MEKPP_PP2A MEKPP_PP2A() #MEKPP_PP2A
	Species ERK ERK() #ERK
	Species ERKP ERKP() #ERKP
	Species E3H_C E3H_C() #E3H_C
	Species PI3K PI3K() #PI3K
	Species E23HP_PI3K E23HP_PI3K() #E23HP_PI3K
	Species Akt_PIP3 Akt_PIP3() #Akt_PIP3
	Species PI3Ka PI3Ka() #PI3Ka
	Species PI2 PI2() #PI2
	Species Akt_PI_P_PP2A Akt_PI_P_PP2A() #Akt_PI_P_PP2A
	Species PTEN PTEN() #PTEN
	Species PIP3 PIP3() #PIP3
	Species PTEN_PIP3 PTEN_PIP3() #PTEN_PIP3
	Species PTEN_PI PTEN_PI() #PTEN_PI
	Species PTENP PTENP() #PTENP
	Species PTENP_PTEN PTENP_PTEN() #PTENP_PTEN
	Species Akt_PI_P Akt_PI_P() #Akt_PI_P
	Species Akt Akt() #Akt
	Species E23HP_PI3Ka E23HP_PI3Ka() #E23HP_PI3Ka
	Species PTEN_PTEN PTEN_PTEN() #PTEN_PTEN
	Species PI3Ka_PI PI3Ka_PI() #PI3Ka_PI
	Species MEKPP MEKPP() #MEKPP
	Species Akt_PI_PP Akt_PI_PP() #Akt_PI_PP
	Species Akt_PI_PP_PP2A Akt_PI_PP_PP2A() #Akt_PI_PP_PP2A
	Species Per Per() #Per
	Species ShGS ShGS() #ShGS
	Species E2Per E2Per() #E2Per
	Species ERKPP ERKPP() #ERKPP
	Species Rafa Rafa() #Rafa
	Species RasGTP RasGTP() #RasGTP
	Species ShcP ShcP() #ShcP
	Species HRG HRG() #HRG
end observables
begin functions
	tERKP() = (ERKP + ERKPP)/tERKP_max
	pAkt() = (Akt_PI_P + Akt_PI_PP + Akt_PI_PP_PP2A + Akt_PI_P_PP2A)/pAkt_max
	tPTENP() = 0.131578947368421*PTENP
	tPTEN() = PTEN + PTENP + PTENP_PTEN + PTEN_PI + PTEN_PIP3 + PTEN_PTEN
	tE3P() = (E23HP + E23HP_PI3K + E23HP_PI3Ka + E23HP_ShGS + E23HP_Shc + E23HP_ShcP)/tE3P_max
	fRate0m() = Kd_1*k1
	fRate1m() = Kd_2*k2
	fRate2m() = Kd_3*k3
	fRate3() = V4/(E23HP + K4)
	fRate4m() = Kd_5*k5
	fRate6m() = Kd_7*k7
	fRate7m() = Kd_8*k8
	fRate8m() = k9*k_9
	fRate9() = V10/(K10 + ShcP)
	fRate10() = ShGS*k11/(K11 + RasGDP)
	fRate11() = V12/(K12 + RasGTP)
	fRate12() = RasGTP*k13/(K13 + Raf)
	fRate13() = Rafa*k14*(Akt_PI_PP + E_raf)/(K14 + Rafa)
	fRate14() = Rafa*k15/(K15 + MEK)
	fRate18() = Rafa*k15/(K15 + MEKP)
	fRate19m() = Kd_16*k16
	fRate22() = MEKPP*k23/(ERK + K23)
	fRate23() = V24/(ERKP + K24)
	fRate24() = MEKPP*k23/(ERKP + K23)
	fRate25() = V24/(ERKPP + K24)
	fRate26m() = Kd_27*k27
	fRate27m() = k28*k_28
	fRate30m() = K_d31*k31
	fRate31m() = Kd_32*k32
	fRate34() = V35/(K35 + PTEN)
	fRate35m() = Kd_36*k36
	fRate38m() = Kd_39*k39
	fRate39() = V40/(Akt_PIP3 + K40)
	fRate43() = V40/(Akt_PI_P + K40)
	fRate44m() = Kd_41*k41
	fRate48m() = Kd_49*k49
	fRate51m() = Kd_2*k2
	fRate53m() = Kd_3*k3
	fRate56() = bpV*k57
	fRate56m() = Kd_57*k57
	fRate57() = LY*k58
	fRate57m() = Kd_58*k58
end functions
begin reaction rules
	R1: E3() + HRG() <-> E3H() k1,fRate0m()
	R2: E2() + E3H() <-> E23H() k2,fRate1m()
	R3: E23H() <-> E23HP() k3,fRate2m()
	R4: E23HP() -> E23H() fRate3()
	R5: E23HP() + Shc() <-> E23HP_Shc() k5,fRate4m()
	R6: E23HP_Shc() <-> E23HP_ShcP() k6,k_6
	R7: E23HP_ShcP() + GS() <-> E23HP_ShGS() k7,fRate6m()
	R8: E23HP_ShGS() <-> E23HP() + ShGS() k8,fRate7m()
	R9: ShGS() <-> GS() + ShcP() k9,fRate8m()
	R10: ShcP() -> Shc() fRate9()
	R11: RasGDP() -> RasGTP() fRate10() #Modifiers(ShGS)
	R12: RasGTP() -> RasGDP() fRate11()
	R13: Raf() -> Rafa() fRate12() #Modifiers(RasGTP)
	R14_reactants_0: 0  -> Rafa() -1*(fRate13()) #Modifiers(Akt_PI_PP)
	R14_products_0: 0  -> Raf() fRate13() #Modifiers(Akt_PI_PP)
	R15: MEK() -> MEKP() fRate14() #Modifiers(Rafa)
	R16_1: MEKP() + PP2A() -> MEKP_PP2A() k16
	R16_2: MEKP_PP2A() -> MEK_PP2A() k16_kat
	R16_3: MEK_PP2A() -> MEK() + PP2A() k18
	R17_1: MEKP() -> MEKPP() fRate18() #Modifiers(Rafa)
	R18_1: MEKPP() + PP2A() <-> MEKPP_PP2A() k16,fRate19m()
	R18_2: MEKPP_PP2A() -> MEKP_PP2A() k16_kat
	R18_3: MEKP_PP2A() -> MEKP() + PP2A() k22
	R19: ERK() -> ERKP() fRate22() #Modifiers(MEKPP)
	R20: ERKP() -> ERK() fRate23()
	R21: ERKP() -> ERKPP() fRate24() #Modifiers(MEKPP)
	R22: ERKPP() -> ERKP() fRate25()
	R23: E23HP() + PI3K() <-> E23HP_PI3K() k27,fRate26m()
	R24: E23HP_PI3K() <-> E23HP_PI3Ka() k28,fRate27m()
	R25: E23HP_PI3Ka() <-> E23HP() + PI3Ka() k29,k_29
	R26: PI3Ka() -> PI3K() V30
	R27_1: PI2() + PI3Ka() <-> PI3Ka_PI() k31,fRate30m()
	R28_1: PIP3() + PTEN() <-> PTEN_PIP3() k32,fRate31m()
	R28_2: PTEN_PIP3() -> PTEN_PI() k33
	R28_3: PTEN_PI() -> PI2() + PTEN() k34
	R28_4: PTEN() -> PTENP() fRate34()
	R28_5: PTEN() + PTENP() <-> PTENP_PTEN() k36,fRate35m()
	R28_6: PTENP_PTEN() -> PTEN_PTEN() k37
	R28_7: PTEN_PTEN() -> PTEN() + PTEN() k38
	R29: Akt() + PIP3() <-> Akt_PIP3() k39,fRate38m()
	R30: Akt_PIP3() -> Akt_PI_P() fRate39()
	R31_1: Akt_PI_P() + PP2A() -> Akt_PI_P_PP2A() k41
	R31_2: Akt_PI_P_PP2A() -> Akt_PIP3_PP2A() k42
	R31_3: Akt_PIP3_PP2A() -> Akt_PIP3() + PP2A() k43
	R32: Akt_PI_P() -> Akt_PI_PP() fRate43()
	R33_1: Akt_PI_PP() + PP2A() <-> Akt_PI_PP_PP2A() k41,fRate44m()
	R33_2: Akt_PI_PP_PP2A() -> Akt_PI_P_PP2A() k42
	R33_3: Akt_PI_P_PP2A() -> Akt_PI_P() + PP2A() k47
	R34: E23HP() -> 0  k48
	R35: E2() + Per() <-> E2_Per() k49,fRate48m()
	R36: E2_Per() <-> E2Per() k50,k_50
	R37: E3H() -> E3H_C() k51
	R38: E2() + E3H_C() <-> E23H() k2,fRate51m()
	R39: E23H() -> E23H_C() k53
	R40: E23H_C() <-> E23HP() k3,fRate53m()
	R41: PI3Ka_PI() -> PI3Ka_PIP3() k55
	R42: PI3Ka_PIP3() -> PI3Ka() + PIP3() k56
	R43: PTEN() <-> PTEN_bpV() fRate56(),fRate56m()
	R44: PI3K() <-> PI3K_LY() fRate57(),fRate57m()
end reaction rules
end model
