###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000429', 'http://identifiers.org/biomodels.db/MODEL1209110001']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/23149687']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0000161']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/4932']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is a plain translation of an SBML model created on 14/08/2021. The original model has 15 molecules and 16 reactions. The translated model has 13 molecules and 19 rules'
###
begin model
begin parameters
	parameter_1 8.314
	parameter_2 303.15
	parameter_3 6.022e+23
	parameter_4 0.93
	parameter_5 1e-09
	parameter_6 10.0
	parameter_7 0.013
	parameter_8 0.61
	parameter_9 14.3
	parameter_10 0.41
	parameter_11 260000.0
	parameter_12 50.0
	parameter_14 0.8
	parameter_17 2.23
	parameter_23 0.4
	parameter_25 42.6396538263077
	parameter_26 1.78587
	parameter_34 0.128378897200866
	parameter_41 48.0003902091319
	parameter_42 2.23
	parameter_43 2.23
	parameter_48 600.0
	parameter_52 0.034
	parameter_53 180000.0
	parameter_57 1.0
	parameter_58 1.0
	parameter_61 2.0
	parameter_67 0.001
	parameter_68 600.0
	parameter_71 1.0
	parameter_72 0.607124
	parameter_73 0.00940584
	parameter_74 0.345701
	parameter_75 0.075474
	parameter_76 9.06781e-05
	parameter_77 18.1824
	parameter_78 0.506878
	parameter_79 0.00226722
	parameter_80 0.297524
	parameter_81 2.0793
	parameter_82 0.00459138
	parameter_83 0.00529124
	parameter_84 0.0811033
	parameter_85 0.628719
	parameter_86 680.818
	parameter_87 46.8363
	parameter_88 0.420741
	parameter_13 (50.0) * (0.41)
	parameter_15 (50.0) * exp(-(0.61) / (14.3))
	parameter_18 1e21 / ((6.022e+23) * compartment_1)
	parameter_19 (260000.0) + (0.61) / ((1e-09) * (8.314) * (303.15))
	parameter_20 (502026.122077738) -(5310000.0) / compartment_1
	parameter_24 -(0.607124)*((1.27698439056792)/compartment_1)*((0.00385515442085361)/compartment_1)*(1+(((0.201092527399535)/compartment_1/(0.00940584)) ^ ((0.345701))))/((0.075474)*((3.57956846222666)/compartment_1))
	parameter_35 (9.06781e-05) * ((1.003) / compartment_1) / ((1.34008635004982) / compartment_1)
	parameter_37 6788 * (5.62907756305974e-05)
	parameter_38 2160 * (5.62907756305974e-05)
	parameter_39 (18.1824) * ((0.201092527399535) / compartment_1) / ((0.506878) + (0.201092527399535) / compartment_1) / ((1.003) / compartment_1)
	parameter_40 2330 * (5.62907756305974e-05)
	parameter_46 (50.0) * (1 -(0.41))
	parameter_47 ((36*3.1415926535) ^ (1/3))*(((50.0)) ^ (2/3))
	parameter_50 (180000.0) / 100
	parameter_51 807 * (5.62907756305974e-05)
	parameter_54 if(((1.0)==1&&(1.0)==1),((0.382101784980495)*(2.23)*(0.8)/100),(if(((1.0)==1&&(1.0)==0),((0.382101784980495)*(2.23)*(0.8)/100),((0.382101784980495)*(2.23)*(0.8)/100))))
	parameter_55 -(0.00226722)*((0.00342460653415448)/compartment_1)*(1+(((0.201092527399535)/compartment_1/(0.297524)) ^ ((2.0793))))/((0.00459138)*((3.57956846222666)/compartment_1)*((3.86572185643496)/compartment_1))
	parameter_59 907 * (5.62907756305974e-05)
	parameter_64 (0.00529124) * ((0.0255278667484759) / compartment_4) * (0.500000000000001) / ((0.0255278667484759) / compartment_4)
	parameter_65 (0.00529124)*((0.0255278667484759)/compartment_4)*(0.500000000000001)*(1+(((0.201092527399535)/compartment_1/(0.0811033)) ^ ((0.628719))))/((0.0255278667484759)/compartment_4)
	parameter_66 (0.00529124) * ((0.0255278667484759) / compartment_4) * (0.500000000000001) / ((0.0255278667484759) / compartment_4 * (0.499999999999999))
	parameter_70 0
	Phosphatase_compartment_1 769 * (5.62907756305974e-05) *
	Phosphatase 769 * (5.62907756305974e-05) *
end parameters
begin compartments
	#volume units: L
	compartment_1 3 29.5 #Vos
	compartment_2 3 50000.0 #Vex
	compartment_3 3 50.0 #V
	compartment_4 3 1.0 #M
end compartments
begin molecule types
	Sho1()
	Pbs2()
	Glyex()
	Glyin()
	Hog1PP()
	Hog1P()
	Fps1P()
	Sho1Pbs2P()
	Fps1()
	Pbs2P()
	Hog1()
	Protein()
	RNA()
end molecule types
begin seed species
	@compartment_1:Glyin()() (180000.0) * compartment_1 #species_1
	@compartment_1:Hog1()() ((0.382101784980495) -(1.39490913506788) / compartment_1 -(0.201092527399535) / compartment_1) * compartment_1 #species_2
	@compartment_1:Hog1PP()() (0.00681669584405203) * compartment_1 #species_3
	@compartment_1:Pbs2()() ((0.12158807536209) -(0.00385515442085361) / compartment_1 -(0.00342460653415448) / compartment_1) * compartment_1 #species_4
	@compartment_1:Pbs2P()() if(((1.0)==1&&(1.0)==1),(-((1.78587)*((1.27698439056792)/compartment_1)*((0.201092527399535)/compartment_1+(((0.201092527399535)/compartment_1*(4*(0.382101784980495)-3*((0.201092527399535)/compartment_1)))^(1/2)))/(4*(42.6396538263077)*((0.201092527399535)/compartment_1-(0.382101784980495))))),(if(((1.0)==1&&(1.0)==0),(-(((42.6396538263077)*(1.78587)*((1.27698439056792)/compartment_1)*((0.201092527399535)/compartment_1)+(((((42.6396538263077)*(1.78587)*((1.27698439056792)/compartment_1))^(2))*((0.201092527399535)/compartment_1)*(4*(0.382101784980495)-3*((0.201092527399535)/compartment_1)))^(1/2)))/(2*(((42.6396538263077))^(2))*((0.201092527399535)/compartment_1-(0.382101784980495))))),(0))))*compartment_1 #species_5
	@compartment_1:Protein()() (0.0454266559338921) * compartment_1 #species_7
	@compartment_1:RNA()() (0.034) * compartment_1 #species_8
	@compartment_1:Hog1P()() if(((1.0)==1&&(1.0)==1),(1/2*(-((0.201092527399535)/compartment_1)+(((0.201092527399535)/compartment_1*(4*(0.382101784980495)-3*((0.201092527399535)/compartment_1)))^(1/2)))),(if(((1.0)==1&&(1.0)==0),((-(42.6396538263077)*(1.78587)*((1.27698439056792)/compartment_1)*((0.201092527399535)/compartment_1)+(((((42.6396538263077)*(1.78587)*((1.27698439056792)/compartment_1))^(2))*((0.201092527399535)/compartment_1)*(4*(0.382101784980495)-3*((0.201092527399535)/compartment_1)))^(1/2)))/(2*(42.6396538263077)*(1.78587)*((1.27698439056792)/compartment_1))),((-(48.0003902091319)*(1.78587)*((1.27698439056792)/compartment_1)*((0.201092527399535)/compartment_1)+(((((48.0003902091319)*(1.78587)*((1.27698439056792)/compartment_1))^(2))*((0.201092527399535)/compartment_1)*(4*(0.382101784980495)-3*((0.201092527399535)/compartment_1)))^(1/2)))/(2*(48.0003902091319)*(1.78587)*((1.27698439056792)/compartment_1))))))*compartment_1 #species_9
	@compartment_1:Sho1()() ((0.131157507219292) -(0.00342460653415448) / compartment_1) * compartment_1 #species_10
	@compartment_1:Sho1Pbs2P()() if(((1.0)==1&&(1.0)==1),(-((1.78587)*((1.27698439056792)/compartment_1)*((0.201092527399535)/compartment_1+(((0.201092527399535)/compartment_1*(4*(0.382101784980495)-3*((0.201092527399535)/compartment_1)))^(1/2)))/(4*(48.0003902091319)*((0.201092527399535)/compartment_1-(0.382101784980495))))),(if(((1.0)==0&&(1.0)==1),(-(((48.0003902091319)*(1.78587)*((1.27698439056792)/compartment_1)*((0.201092527399535)/compartment_1)+(((((48.0003902091319)*(1.78587)*((1.27698439056792)/compartment_1))^(2))*((0.201092527399535)/compartment_1)*(4*(0.382101784980495)-3*((0.201092527399535)/compartment_1)))^(1/2)))/(2*(((48.0003902091319))^(2))*((0.201092527399535)/compartment_1-(0.382101784980495))))),(0))))*compartment_1 #species_11
	@compartment_2:Glyex()() (5310000.0) / compartment_1 / 100 * compartment_2 #species_13
	@compartment_4:Fps1()() (0.0510557334969518) / 2 * compartment_4 #species_14
	@compartment_4:Fps1P()() (0.0510557334969518) / 2 * compartment_4 #species_15
end seed species
begin observables
	Species Glyin_compartment_1 @compartment_1:Glyin() #Glyin
	Species Hog1_compartment_1 @compartment_1:Hog1() #Hog1
	Species Hog1PP_compartment_1 @compartment_1:Hog1PP() #Hog1PP
	Species Pbs2_compartment_1 @compartment_1:Pbs2() #Pbs2
	Species Pbs2P_compartment_1 @compartment_1:Pbs2P() #Pbs2P
	Species Protein_compartment_1 @compartment_1:Protein() #Protein
	Species RNA_compartment_1 @compartment_1:RNA() #RNA
	Species Hog1P_compartment_1 @compartment_1:Hog1P() #Hog1P
	Species Sho1_compartment_1 @compartment_1:Sho1() #Sho1
	Species Sho1Pbs2P_compartment_1 @compartment_1:Sho1Pbs2P() #Sho1Pbs2P
	Species Glyex_compartment_2 @compartment_2:Glyex() #Glyex
	Species Fps1_compartment_4 @compartment_4:Fps1() #Fps1
	Species Fps1P_compartment_4 @compartment_4:Fps1P() #Fps1P
end observables
begin functions
	parameter_49() =  if((time()>parameter_48),(parameter_11+1000000*parameter_23*parameter_4*(2-2*exp((parameter_48-time())/parameter_6))-parameter_50),(parameter_11-parameter_50))
	parameter_44() = 2.0e-5*Glyex_compartment_2 + parameter_49
	parameter_21() =  if(( 50.0 >parameter_15),(parameter_9* ln( 50.0 /parameter_15)),(0))
	parameter_16() = 19.8775701034055*6^(2/3)
	parameter_45() = 0.0338983050847458*Glyin_compartment_1 + 0.0338983050847458*parameter_20*parameter_46
	arRatecompartment_1() = -parameter_16*parameter_7*(parameter_1*parameter_2*parameter_5*(parameter_44 - parameter_45) + parameter_21)
	parameter_69() =  if((parameter_70==1),(if((time()>parameter_68),(parameter_67),(1))),(1))
	Hog1PPActive_ar() = Hog1PP_compartment_1*parameter_69
	parameter_63() = -parameter_21^parameter_61/(parameter_21^parameter_61 + parameter_8^parameter_61) + 1
	parameter_62() = parameter_21^parameter_61/(parameter_21^parameter_61 + parameter_8^parameter_61)
	parameter_33() = parameter_21/(parameter_1*parameter_2*parameter_5)
	parameter_60() = 1.0*Fps1P_compartment_4 + 1.0*Fps1_compartment_4
	parameter_56() =  if(((-parameter_16+parameter_47)/parameter_47>parameter_55),(-parameter_55+(-parameter_16+parameter_47)/parameter_47),(0))
	parameter_36() = 3.4*RNA_compartment_1/(parameter_46*parameter_52)
	parameter_32() = 17*Glyin_compartment_1/(parameter_46*parameter_53)
	parameter_31() = 19.9*Protein_compartment_1/(parameter_46*parameter_51)
	parameter_30() = 100*Hog1PP_compartment_1/(parameter_14*parameter_37*parameter_46)
	parameter_29() = 5000.0/parameter_12
	parameter_28() = 1.0*Fps1_compartment_4/parameter_59
	parameter_27() = 2.0*parameter_46*parameter_51*parameter_86*(parameter_54*parameter_87 + 1)/(parameter_47*(-parameter_50 + parameter_53)*(parameter_51*(parameter_54*parameter_87 + 1) + parameter_88))
	parameter_22() =  if(((-parameter_16+parameter_47)/parameter_47>parameter_24),(-parameter_24+(-parameter_16+parameter_47)/parameter_47),(0))
	compartment_3() = parameter_13 + 29.5
	fRate0() = 29.5*parameter_22*parameter_58*parameter_75/((0.0338983050847458*Hog1PPActive_compartment_1/parameter_73)^parameter_74 + 1.0)
	fRate1() = Phosphatase_compartment_1*parameter_72
	fRate2() = 0.0011490950876185*Hog1_compartment_1*Pbs2P_compartment_1*parameter_25 + 3.89523758514746e-5*Hog1_compartment_1*Sho1Pbs2P_compartment_1*parameter_41
	fRate3() = Phosphatase_compartment_1*parameter_26
	fRate4() = RNA_compartment_1*parameter_76
	fRate6() = Protein_compartment_1*parameter_86*(Hog1PPActive_compartment_1*parameter_87 + 29.5)/(Hog1PPActive_compartment_1*Protein_compartment_1*parameter_87 + 29.5*Protein_compartment_1 + 870.25*parameter_88)
	fRate7() = 2.298190175237e-8*parameter_16*parameter_27*parameter_28
	fRate7m() = 1.35593220338983e-11*parameter_16*parameter_27*parameter_28
	fRate8() = Hog1PPActive_compartment_1*parameter_77/(Hog1PPActive_compartment_1 + 29.5*parameter_78)
	fRate10() = 0.0011490950876185*Hog1P_compartment_1*Pbs2P_compartment_1*parameter_25 + 3.89523758514746e-5*Hog1P_compartment_1*Sho1Pbs2P_compartment_1*parameter_41
	fRate11() = Phosphatase_compartment_1*parameter_26
	fRate13() = parameter_56*parameter_57*parameter_82/((0.0338983050847458*Hog1PPActive_compartment_1/parameter_80)^parameter_81 + 1.0)
	fRate14() = parameter_63*parameter_71*parameter_83
	fRate15() = 29.5*parameter_65*parameter_71/((0.0338983050847458*Hog1PPActive_compartment_1/parameter_84)^parameter_85 + 1.0)
end functions
begin reaction rules
	reaction_1: Pbs2()@compartment_1 -> Pbs2P()@compartment_1 fRate0() #Modifiers(species_12, species_4, species_12)
	reaction_2: Pbs2P()@compartment_1 -> Pbs2()@compartment_1 fRate1() #Modifiers(species_6, species_6, species_5)
	reaction_3_reactants_0: 0  -> Hog1()@compartment_1 -1*(fRate2()) #Modifiers(species_5, species_11, species_5, species_2, species_11)
	reaction_3_products_0: 0  -> Hog1P()@compartment_1 fRate2() #Modifiers(species_5, species_11, species_5, species_2, species_11)
	reaction_4: Hog1P()@compartment_1 -> Hog1()@compartment_1 fRate3() #Modifiers(species_6, species_6, species_9)
	reaction_5: 0  -> Protein()@compartment_1 fRate4() #Modifiers(species_8, species_8)
	reaction_6: Protein()@compartment_1 -> 0  parameter_35 #Modifiers(species_7)
	reaction_7: 0  -> Glyin()@compartment_1 fRate6() #Modifiers(species_7, species_12, species_7, species_12)
	reaction_8: Glyin()@compartment_1 <-> Glyex()@compartment_2 fRate7(),fRate7m() #Modifiers(species_13, species_1)
	reaction_9: 0  -> RNA()@compartment_1 fRate8() #Modifiers(species_12, species_12)
	reaction_10: RNA()@compartment_1 -> 0  parameter_39 #Modifiers(species_8)
	reaction_11_reactants_0: 0  -> Hog1P()@compartment_1 -1*(fRate10()) #Modifiers(species_5, species_11, species_5, species_9, species_11)
	reaction_11_products_0: 0  -> Hog1PP()@compartment_1 fRate10() #Modifiers(species_5, species_11, species_5, species_9, species_11)
	reaction_12: Hog1PP()@compartment_1 -> Hog1P()@compartment_1 fRate11() #Modifiers(species_6, species_6, species_3)
	reaction_13: Sho1Pbs2P()@compartment_1 -> Sho1()@compartment_1 + Pbs2()@compartment_1 parameter_79 #Modifiers(species_11)
	reaction_14: Pbs2()@compartment_1 + Sho1()@compartment_1 -> Sho1Pbs2P()@compartment_1 fRate13() #Modifiers(species_12, species_4, species_10, species_12)
	reaction_15: Fps1()@compartment_4 -> Fps1P()@compartment_4 fRate14() #Modifiers(species_14)
	reaction_16: Fps1P()@compartment_4 -> Fps1()@compartment_4 fRate15() #Modifiers(species_12, species_15, species_12)
	0  -> compartment_1()@compartment_1 arRatecompartment_1 #rateLaw
end reaction rules
end model
