###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000444', 'http://identifiers.org/biomodels.db/MODEL1112190007']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/22694947']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/biomodels.db/BIOMD0000000441', 'http://identifiers.org/biomodels.db/BIOMD0000000251', 'http://identifiers.org/biomodels.db/BIOMD0000000250']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/131567']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0000165']
#@creatorEmail:'juty@ebi.ac.uk'
#@creatorName:'Juty Nick'
#@notes:'This is a plain translation of an SBML model created on 13/08/2021. The original model has 18 molecules and 22 reactions. The translated model has 15 molecules and 23 rules'
###
begin model
begin parameters
	parameter_1 0.022
	P1 6.021999420013666e+16 #original 99.9999903688752substance/volume
	P2 3.0109997100068384e+17 #original 499.999951844377substance/volume
	P3 3.010999855003416e+17 #original 499.999975922188substance/volume
	r1_A 100.000000
	r1_K1 15.000000
	r1_Ka 500.000000
	r1_V1 6.000000
	r2_K3 20.000000
	r2_KI 9.000000
	r2_k3 0.100000
	r3_K4 20.000000
	r3_KI 9.000000
	r3_k4 0.100000
	r4_K7 20.000000
	r4_k7 0.100000
	r5_K8 20.000000
	r5_k8 0.100000
	r6_K2 100.000000
	r6_k2 0.100000
	r7_K5 20.000000
	r7_k5 0.020000
	r8_K6 20.000000
	r8_k6 0.020000
	r9_K9 20.000000
	r9_k9 0.020000
	r10_K10 20.000000
	r10_k10 0.020000
	r11_k11f 10.340000
	r11_k11b 2.860000
	r12_V12 29.240000
	r12_n12 3.970000
	r12_K12 169.000000
	r13_k1 0.022000
	r14_k1 0.007800
	r15_k15 0.001200
	r16_k1 22.560000
	r16_k2 15.400000
	r17_k1 0.000250
	r18_k1 0.000250
	r19_k1 10.340000
	r19_k2 2.860000
	r20_k1 10.340000
	r20_k2 2.860000
	r21_k21 0.680000
	r21_K21 10300.000000
	r21_K21i 87.000000
	r22_k22 0.310000
	r22_K22 87.000000
	r22_K22i 10300.000000
end parameters
begin molecule types
	MKKK()
	MKK_PP()
	M_PP()
	MKK()
	M_P()
	P3mRNA()
	P3_c()
	MKK_P()
	P3_n()
	M_n()
	PreP3_mRNA()
	MKKK_P()
	M()
	M_PP_n()
	M_P_n()
end molecule types
begin seed species
	MKKK() 6.021999420013672e+17 # (999.999903688753 * 1e-09)mol/L * 6.022e23/mol *1.0L #MKKK #species_0
	MKK() 2.4087998840027305e+18 #original 3999.9998073775substance/volume  #MKK #species_2
	M() 6.021999420013672e+17 #original 999.999903688753substance/volume  #M #species_5
end seed species
begin observables
	Species MKKK MKKK() #MKKK
	Species MKKK_P MKKK_P() #MKKK_P
	Species MKK MKK() #MKK
	Species MKK_P MKK_P() #MKK_P
	Species MKK_PP MKK_PP() #MKK_PP
	Species M M() #M
	Species M_P M_P() #M_P
	Species M_PP M_PP() #M_PP
	Species M_PP_n M_PP_n() #M_PP_n
	Species PreP3_mRNA PreP3_mRNA() #PreP3_mRNA
	Species P3mRNA P3mRNA() #P3mRNA
	Species P3_c P3_c() #P3_c
	Species P3_n P3_n() #P3_n
	Species M_n M_n() #M_n
	Species M_P_n M_P_n() #M_P_n
end observables
begin functions
	fRate0() = 6.0*MKKK*(0.2*M_PP + 1)/((1.0*MKKK + 15.0)*(0.002*M_PP + 1))
	fRate1() = 0.9*MKKK_P/(MKK*M_PP + 9.0*MKK + MKK_P*M_PP + 9.0*MKK_P + 20.0*M_PP + 180.0)
	fRate2() = 0.9*MKKK_P/(MKK*M_PP + 9.0*MKK + MKK_P*M_PP + 9.0*MKK_P + 20.0*M_PP + 180.0)
	fRate3() = 0.1*MKK_PP/(M + M_P + 20.0)
	fRate4() = 0.1*MKK_PP/(M + M_P + 20.0)
	fRate5() = 0.1*P1/(MKKK_P + 100.0)
	fRate6() = 0.02*P2/(MKK_P + MKK_PP + 20.0)
	fRate7() = 0.02*P2/(MKK_P + MKK_PP + 20.0)
	fRate8() = 0.02*P3/(M_P + M_PP + 20.0)
	fRate9() = 0.02*P3/(M_P + M_PP + 20.0)
	fRate10m() = 2.86
	fRate11() = 29.24*M_PP_n^3.97/(M_PP_n^3.97 + 699375182.686662)
	fRate14() = 0.0012*P3mRNA
	fRate20() = 59.16*P3_n/(87.0*M_PP_n + 10300.0*M_P_n + 896100.0)
	fRate21() = 3193.0*P3_n/(87.0*M_PP_n + 10300.0*M_P_n + 896100.0)
end functions
begin reaction rules
	reaction_0_reactants_0: 0  -> MKKK() -1*(fRate0()) #Modifiers(species_7, species_0, species_7, species_0, species_7)
	reaction_0_products_0: 0  -> MKKK_P() fRate0() #Modifiers(species_7, species_0, species_7, species_0, species_7)
	reaction_1: MKK() -> MKK_P() fRate1() #Modifiers(species_1, species_3, species_7, species_1, species_2, species_3, species_7, species_1, species_2, species_3, species_7)
	reaction_2: MKK_P() -> MKK_PP() fRate2() #Modifiers(species_1, species_2, species_7, species_1, species_2, species_3, species_7, species_1, species_2, species_3, species_7)
	reaction_3: M() -> M_P() fRate3() #Modifiers(species_4, species_6, species_4, species_5, species_6, species_4, species_5, species_6)
	reaction_4: M_P() -> M_PP() fRate4() #Modifiers(species_4, species_5, species_4, species_5, species_6, species_4, species_5, species_6)
	reaction_5: MKKK_P() -> MKKK() fRate5() #Modifiers(species_8, species_1, species_8, species_1, species_8)
	reaction_6: MKK_PP() -> MKK_P() fRate6() #Modifiers(species_9, species_3, species_3, species_4, species_9, species_3, species_4, species_9)
	reaction_7: MKK_P() -> MKK() fRate7() #Modifiers(species_9, species_4, species_3, species_4, species_9, species_3, species_4, species_9)
	reaction_8: M_PP() -> M_P() fRate8() #Modifiers(species_10, species_6, species_5, species_10, species_6, species_7, species_10, species_6, species_7)
	reaction_9: M_P() -> M() fRate9() #Modifiers(species_10, species_7, species_5, species_10, species_6, species_7, species_10, species_6, species_7)
	reaction_10: M_PP() <-> M_PP_n() r11_k11f,fRate10m() #Modifiers(species_7, species_11, species_7, species_11)
	reaction_11: 0  -> PreP3_mRNA() fRate11() #Modifiers(species_11, species_11, species_11)
	reaction_12: PreP3_mRNA() -> P3mRNA() r13_k1 #Modifiers(species_12, species_12)
	reaction_13: P3mRNA() -> 0  r14_k1 #Modifiers(species_13, species_13)
	reaction_14: 0  -> P3_c() fRate14() #Modifiers(species_13, species_13, species_13)
	reaction_15: P3_c() <-> P3_n() r16_k1,r16_k2 #Modifiers(species_14, species_15, species_14, species_15)
	reaction_16: P3_c() -> 0  r17_k1 #Modifiers(species_14, species_14)
	reaction_17: P3_n() -> 0  r18_k1 #Modifiers(species_15, species_15)
	reaction_18: M() <-> M_n() r19_k1,r19_k2 #Modifiers(species_5, species_16, species_5, species_16)
	reaction_19: M_P() <-> M_P_n() r20_k1,r20_k2 #Modifiers(species_6, species_17, species_6, species_17)
	reaction_20: M_PP_n() -> M_P_n() fRate20() #Modifiers(species_15, species_17, species_15, species_11, species_17, species_15, species_11, species_17)
	reaction_21: M_P_n() -> M_n() fRate21() #Modifiers(species_15, species_11, species_15, species_17, species_11, species_15, species_17, species_11)
end reaction rules
end model
