###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000457', 'http://identifiers.org/biomodels.db/MODEL1205190000']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/23340841']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/4932']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0006412']
#@creatorEmail:'pedro.mendes@manchester.ac.uk'
#@creatorName:'Mendes Pedro'
#@notes:'This is a plain translation of an SBML model created on 14/08/2021. The original model has 166 molecules and 141 reactions. The translated model has 165 molecules and 166 rules'
###
begin model
begin parameters
	parameter_2 8100355357.16195
	parameter_3 0.284007213965168
	parameter_4 28324.3562938545
	parameter_5 3103771694.66493
	parameter_6 0.00322599
	parameter_7 2306950.0
	parameter_8 2240520000.0
	parameter_9 72911.6740026381
	parameter_12 2.86585731558e-20
	parameter_1 (2.86585731558e-20) / compartment_1
	r1_k1 19609600.000000
	r1_k2 34.802500
	r2_k1 533.260000
	r2_k2 3.976980
	r3_k1 104798.000000
	r3_k2 6.329980
	r4_k1 20024500.000000
	r4_k2 0.406929
	r5_k1 160265000.000000
	r5_k2 57.185400
	r6_k1 3865650.000000
	r6_k2 31.196900
	r7_k1 814356.000000
	r8_k1 19725400.000000
	r9_k1 43327400.000000
	r9_k2 1977.920000
	r10_k1 5026500.000000
	r10_k2 0.007740
	r11_k1 57991200.000000
	r11_k2 2.700260
	r12_k1 307831.000000
	r12_k2 2.381840
	r13_k1 352080000000000.000000
	r13_k2 0.785013
	r14_k1 1062040000.000000
	r15_k1 87134000000.000000
	r15_k2 1.239500
	r16_k1 304.768000
	r16_k2 45.408200
	r17_k1 561005000.000000
	r17_k2 47.821500
	r18_k 13072000000000.000000
	r19_k1 1170250.000000
	r19_k2 14.291200
	r20_k1 13.295000
	r20_k2 43354100.000000
	r21_k1 39591.900000
	r21_k2 0.000009
	r22_k1 1.805420
	r22_k2 1.295130
	r23_k1 93.599500
	r23_k2 43714.400000
	r138_k1 14200.800000
	r138_k2 18032.600000
	r139_k1 1600000000.000000
	r139_k2 35378.100000
	r140_k1 153068000.000000
	r141_k1 3549100000.000000
end parameters
begin molecule types
	s80S_aa_tRNA_eEF1A_GTP_14()
	s80S_tRNA_15()
	eEF3_GDP()
	s80S_tRNA_eEF3_GTP_2()
	s80S_tRNA_12()
	eEF1A_GDP()
	s80S_aa_tRNA_eEF1A_GTP_12()
	s80S_aa_tRNA_eEF2_GTP_16()
	s80S_aa_tRNA_8()
	s40S()
	s80S_tRNA_17()
	s80S_tRNA_eEF3_GTP_11()
	s80S_9()
	eIF4G()
	eIF4A()
	s80S_tRNA_eEF3_GTP_16()
	s80S_tRNA_16()
	s80S_12()
	eIF2_GDP()
	s48S_Ded1()
	s80S_tRNA_eEF3_GTP_8()
	eIF1_eIF3_eIF5_eIF2_GTP_Met_tRNA()
	s80S_eRF1_eRF3_GTP()
	s80S_aa_tRNA_12()
	s80S_2()
	s80S_aa_tRNA_9()
	s80S_16()
	eIF4E_eIF4G_mRNA_Pab1()
	s40S_eIF1A()
	eIF4A_eIF4E_eIF4G_mRNA_Pab1()
	s80S_3()
	s80S_aa_tRNA_6()
	eEF2_GDP()
	s80S_aa_tRNA_17()
	Met_tRNA()
	s80S_aa_tRNA_eEF1A_GTP_7()
	eIF5B_GDP()
	s80S_tRNA_6()
	s80S_aa_tRNA_4()
	s80S_aa_tRNA_eEF2_GTP_10()
	s80S_aa_tRNA_19()
	eIF4E_eIF4G()
	s80S_aa_tRNA_eEF2_GTP_3()
	s80S_tRNA_eEF3_GTP_10()
	s80S_aa_tRNA_5()
	eIF2_GTP_Met_tRNA()
	tRNA()
	s80S_aa_tRNA_eEF1A_GTP_11()
	s80S_aa_tRNA_10()
	s80S_7()
	s80S_tRNA_eEF3_GTP_3()
	eRF1_eRF3_GTP()
	s80S_tRNA_eEF3_GTP_15()
	s80S_tRNA_eEF3_GTP_19()
	eEF2_GTP()
	s80S_aa_tRNA_eEF2_GTP_15()
	s80S_11()
	s48S()
	s80S_aa_tRNA_eEF2_GTP_19()
	s80S_aa_tRNA_1()
	s80S_aa_tRNA_16()
	s80S_tRNA_eEF3_GTP_12()
	s80S_tRNA_2()
	s80S_aa_tRNA_eEF1A_GTP_6()
	aa_tRNA()
	s80S_tRNA_eEF3_GTP_20()
	eEF1A_GTP()
	eIF2_GDP_eIF2B()
	s80S_14()
	s80S_aa_tRNA_eEF1A_GTP_3()
	s80S_tRNA_11()
	Ded1()
	s80S_aa_tRNA_15()
	eIF4E()
	s80S_tRNA_eEF3_GTP_6()
	s80S_tRNA_eEF3_GTP_14()
	s80S_aa_tRNA_13()
	s80S_tRNA_eEF3_GTP_7()
	s43S()
	eIF5B_GTP()
	s80S_aa_tRNA_eEF2_GTP_2()
	s80S_aa_tRNA_eEF1A_GTP_10()
	s80S_4()
	s80S_aa_tRNA_eEF2_GTP_4()
	s80S_aa_tRNA_18()
	eEF3_GTP()
	s80S_aa_tRNA_14()
	s80S_aa_tRNA_2()
	s80S_aa_tRNA_eEF1A_GTP_4()
	s80S_aa_tRNA_eEF1A_GTP_8()
	s80S_tRNA_13()
	s48S_Ded1_eIF5B_GTP()
	s80S_aa_tRNA_eEF1A_GTP_1()
	eIF3()
	s80S_tRNA_19()
	s80S_aa_tRNA_eEF1A_GTP_9()
	s80S_tRNA_14()
	s80S_aa_tRNA_eEF1A_GTP_13()
	eIF2B()
	eEF1A_GDP_eEF1B()
	s80S_1()
	s80S_aa_tRNA_eEF1A_GTP_19()
	s60S()
	s80S_aa_tRNA_eEF2_GTP_17()
	s80S_aa_tRNA_eEF1A_GTP_18()
	s80S_tRNA_3()
	s80S_aa_tRNA_eEF1A_GTP_15()
	s80S_tRNA_4()
	mRNA_Pab1()
	s80S_tRNA_eEF3_GTP_9()
	eIF3_eIF5()
	s80S_10()
	s80S_tRNA_eEF3_GTP_4()
	s80S_tRNA_20()
	eRF1()
	s80S_8()
	s80S_6()
	eIF4B()
	s80S_aa_tRNA_eEF2_GTP_14()
	eIF4E_eIF4G_mRNA_Pab1_eIF4A_eIF4B()
	s80S_aa_tRNA_eEF2_GTP_12()
	s80S_aa_tRNA_eEF1A_GTP_17()
	eRF3_GDP()
	eIF5()
	s80S_aa_tRNA_eEF2_GTP_9()
	s80S_aa_tRNA_eEF1A_GTP_5()
	eIF1()
	s80S_tRNA_9()
	s80S_tRNA_eEF3_GTP_5()
	s80S_tRNA_eEF3_GTP_17()
	s80S_tRNA_eEF3_GTP_18()
	s80S_19()
	mRNA_cap()
	s80S_17()
	s80S_15()
	s80S_aa_tRNA_eEF2_GTP_8()
	s80S_aa_tRNA_eEF2_GTP_5()
	s80S_18()
	s80S_aa_tRNA_7()
	s80S_tRNA_eEF3_GTP_13()
	s80S_tRNA_10()
	s80S_aa_tRNA_eEF1A_GTP_16()
	s80S_aa_tRNA_eEF2_GTP_7()
	s80S_tRNA_18()
	s80S_aa_tRNA_eEF2_GTP_18()
	s80S_13()
	eEF1B()
	aa_tRNA_eEF1A_GTP()
	s80S_aa_tRNA_eEF2_GTP_1()
	s80S_tRNA_7()
	s80S_aa_tRNA_eEF2_GTP_6()
	s80S_aa_tRNA_eEF2_GTP_13()
	s80S_20()
	s80S_aa_tRNA_eEF2_GTP_11()
	s80S_aa_tRNA_3()
	s80S_5()
	s80S_tRNA_8()
	eIF3_eIF5_eIF2_GTP_Met_tRNA()
	s80S_aa_tRNA_eEF1A_GTP_2()
	eRF3_GTP()
	s80S_aa_tRNA_11()
	Pab1()
	s80S_tRNA_5()
	eIF2_GTP()
	eIF1A()
end molecule types
begin seed species
	eIF2_GDP() 7.07650064716229e+17 # 1.17510804502861e-06mol/L * 6.022e23/mol *1.0L #eIF2_GDP #species_1
	eIF2B() 1.3664966766934101e+17 #original 2.26917415591732e-07mol/L #eIF2B #species_2
	$Met_tRNA() 1.5617104876496134e+19 #original 2.59334189247694e-05mol/L #Met_tRNA #species_5
	eIF3() 5.6123970649907904e+17 #original 9.31982242608899e-07mol/L #eIF3 #species_7
	eIF5() 4.880345273905031e+17 #original 8.10419341399042e-07mol/L #eIF5 #species_8
	eIF1() 9.272656020419561e+17 #original 1.53979674865818e-06mol/L #eIF1 #species_11
	s40S() 4.636328010209787e+18 #original 7.69898374329091e-06mol/L #s40S #species_13
	eIF1A() 1.390898403062934e+18 #original 2.30969512298727e-06mol/L #eIF1A #species_14
	eIF4E() 1.9521381095620137e+18 #original 3.24167736559617e-06mol/L #eIF4E #species_17
	eIF4G() 5.368379801295539e+17 #original 8.91461275538947e-07mol/L #eIF4G #species_18
	Pab1() 1.0736759602591054e+18 #original 1.78292255107789e-06mol/L #Pab1 #species_21
	eIF4A() 5.856414328686029e+18 #original 9.72503209678849e-06mol/L #eIF4A #species_24
	eIF4B() 6.83248338346705e+17 #original 1.13458707795866e-06mol/L #eIF4B #species_25
	Ded1() 6.83248338346705e+17 #original 1.13458707795866e-06mol/L #Ded1 #species_29
	eIF5B_GDP() 1.171282865737207e+17 #original 1.9450064193577e-07mol/L #eIF5B_GDP #species_31
	s60S() 4.636327788154071e+18 #original 7.6989833745501e-06mol/L #s60S #species_34
	eEF1A_GDP() 2.4401726369525154e+19 #original 4.05209670699521e-05mol/L #eEF1A_GDP #species_35
	eEF1B() 1.9277363831924897e+18 #original 3.20115639852622e-06mol/L #eEF1B #species_36
	$aa_tRNA() 3.1234210564121946e+20 #original 0.000518668391964828mol/L #aa_tRNA #species_39
	eEF2_GDP() 3.416241691733525e+18 #original 5.6729353897933e-06mol/L #eEF2_GDP #species_41
	eEF3_GDP() 2.684189900647755e+18 #original 4.45730637769471e-06mol/L #eEF3_GDP #species_43
	$tRNA() 1.5617074423141627e+20 #original 0.000259333683546025mol/L #tRNA #species_45
	eRF3_GDP() 3.416241691733525e+17 #original 5.6729353897933e-07mol/L #eRF3_GDP #species_161
	eRF1() 5.368379801295539e+17 #original 8.91461275538947e-07mol/L #eRF1 #species_163
	mRNA_cap()() (7.16464328895e-07) #species_20
end seed species
begin observables
	Species eIF2_GDP eIF2_GDP() #eIF2_GDP
	Species eIF2B eIF2B() #eIF2B
	Species eIF2_GDP_eIF2B eIF2_GDP_eIF2B() #eIF2_GDP_eIF2B
	Species eIF2_GTP eIF2_GTP() #eIF2_GTP
	Species Met_tRNA Met_tRNA() #Met-tRNA
	Species eIF2_GTP_Met_tRNA eIF2_GTP_Met_tRNA() #eIF2_GTP_Met-tRNA
	Species eIF3 eIF3() #eIF3
	Species eIF5 eIF5() #eIF5
	Species eIF3_eIF5 eIF3_eIF5() #eIF3_eIF5
	Species eIF3_eIF5_eIF2_GTP_Met_tRNA eIF3_eIF5_eIF2_GTP_Met_tRNA() #eIF3_eIF5_eIF2_GTP_Met-tRNA
	Species eIF1 eIF1() #eIF1
	Species eIF1_eIF3_eIF5_eIF2_GTP_Met_tRNA eIF1_eIF3_eIF5_eIF2_GTP_Met_tRNA() #eIF1_eIF3_eIF5_eIF2_GTP_Met-tRNA
	Species s40S s40S() #40S
	Species eIF1A eIF1A() #eIF1A
	Species s40S_eIF1A s40S_eIF1A() #40S_eIF1A
	Species s43S s43S() #43S
	Species eIF4E eIF4E() #eIF4E
	Species eIF4G eIF4G() #eIF4G
	Species eIF4E_eIF4G eIF4E_eIF4G() #eIF4E_eIF4G
	Species mRNA_cap mRNA_cap() #mRNA_cap
	Species Pab1 Pab1() #Pab1
	Species mRNA_Pab1 mRNA_Pab1() #mRNA_Pab1
	Species eIF4E_eIF4G_mRNA_Pab1 eIF4E_eIF4G_mRNA_Pab1() #eIF4E_eIF4G_mRNA_Pab1
	Species eIF4A eIF4A() #eIF4A
	Species eIF4B eIF4B() #eIF4B
	Species eIF4E_eIF4G_mRNA_Pab1_eIF4A_eIF4B eIF4E_eIF4G_mRNA_Pab1_eIF4A_eIF4B() #eIF4E_eIF4G_mRNA_Pab1_eIF4A_eIF4B
	Species s48S s48S() #48S
	Species Ded1 Ded1() #Ded1
	Species s48S_Ded1 s48S_Ded1() #48S_Ded1
	Species eIF5B_GDP eIF5B_GDP() #eIF5B_GDP
	Species eIF5B_GTP eIF5B_GTP() #eIF5B_GTP
	Species s48S_Ded1_eIF5B_GTP s48S_Ded1_eIF5B_GTP() #48S_Ded1_eIF5B_GTP
	Species s60S s60S() #60S
	Species eEF1A_GDP eEF1A_GDP() #eEF1A_GDP
	Species eEF1B eEF1B() #eEF1B
	Species eEF1A_GDP_eEF1B eEF1A_GDP_eEF1B() #eEF1A_GDP_eEF1B
	Species eEF1A_GTP eEF1A_GTP() #eEF1A_GTP
	Species aa_tRNA aa_tRNA() #aa-tRNA
	Species aa_tRNA_eEF1A_GTP aa_tRNA_eEF1A_GTP() #aa-tRNA_eEF1A_GTP
	Species eEF2_GDP eEF2_GDP() #eEF2_GDP
	Species eEF2_GTP eEF2_GTP() #eEF2_GTP
	Species eEF3_GDP eEF3_GDP() #eEF3_GDP
	Species eEF3_GTP eEF3_GTP() #eEF3_GTP
	Species tRNA tRNA() #tRNA
	Species s80S_1 s80S_1() #80S_1
	Species s80S_aa_tRNA_eEF1A_GTP_1 s80S_aa_tRNA_eEF1A_GTP_1() #80S_aa-tRNA_eEF1A_GTP_1
	Species s80S_aa_tRNA_1 s80S_aa_tRNA_1() #80S_aa-tRNA_1
	Species s80S_aa_tRNA_eEF2_GTP_1 s80S_aa_tRNA_eEF2_GTP_1() #80S_aa-tRNA_eEF2_GTP_1
	Species s80S_2 s80S_2() #80S_2
	Species s80S_aa_tRNA_eEF1A_GTP_2 s80S_aa_tRNA_eEF1A_GTP_2() #80S_aa-tRNA_eEF1A_GTP_2
	Species s80S_aa_tRNA_2 s80S_aa_tRNA_2() #80S_aa-tRNA_2
	Species s80S_aa_tRNA_eEF2_GTP_2 s80S_aa_tRNA_eEF2_GTP_2() #80S_aa-tRNA_eEF2_GTP_2
	Species s80S_tRNA_2 s80S_tRNA_2() #80S_tRNA_2
	Species s80S_tRNA_eEF3_GTP_2 s80S_tRNA_eEF3_GTP_2() #80S_tRNA_eEF3_GTP_2
	Species s80S_3 s80S_3() #80S_3
	Species s80S_aa_tRNA_eEF1A_GTP_3 s80S_aa_tRNA_eEF1A_GTP_3() #80S_aa-tRNA_eEF1A_GTP_3
	Species s80S_aa_tRNA_3 s80S_aa_tRNA_3() #80S_aa-tRNA_3
	Species s80S_aa_tRNA_eEF2_GTP_3 s80S_aa_tRNA_eEF2_GTP_3() #80S_aa-tRNA_eEF2_GTP_3
	Species s80S_tRNA_3 s80S_tRNA_3() #80S_tRNA_3
	Species s80S_tRNA_eEF3_GTP_3 s80S_tRNA_eEF3_GTP_3() #80S_tRNA_eEF3_GTP_3
	Species s80S_4 s80S_4() #80S_4
	Species s80S_aa_tRNA_eEF1A_GTP_4 s80S_aa_tRNA_eEF1A_GTP_4() #80S_aa-tRNA_eEF1A_GTP_4
	Species s80S_aa_tRNA_4 s80S_aa_tRNA_4() #80S_aa-tRNA_4
	Species s80S_aa_tRNA_eEF2_GTP_4 s80S_aa_tRNA_eEF2_GTP_4() #80S_aa-tRNA_eEF2_GTP_4
	Species s80S_tRNA_4 s80S_tRNA_4() #80S_tRNA_4
	Species s80S_tRNA_eEF3_GTP_4 s80S_tRNA_eEF3_GTP_4() #80S_tRNA_eEF3_GTP_4
	Species s80S_5 s80S_5() #80S_5
	Species s80S_aa_tRNA_eEF1A_GTP_5 s80S_aa_tRNA_eEF1A_GTP_5() #80S_aa-tRNA_eEF1A_GTP_5
	Species s80S_aa_tRNA_5 s80S_aa_tRNA_5() #80S_aa-tRNA_5
	Species s80S_aa_tRNA_eEF2_GTP_5 s80S_aa_tRNA_eEF2_GTP_5() #80S_aa-tRNA_eEF2_GTP_5
	Species s80S_tRNA_5 s80S_tRNA_5() #80S_tRNA_5
	Species s80S_tRNA_eEF3_GTP_5 s80S_tRNA_eEF3_GTP_5() #80S_tRNA_eEF3_GTP_5
	Species s80S_6 s80S_6() #80S_6
	Species s80S_aa_tRNA_eEF1A_GTP_6 s80S_aa_tRNA_eEF1A_GTP_6() #80S_aa-tRNA_eEF1A_GTP_6
	Species s80S_aa_tRNA_6 s80S_aa_tRNA_6() #80S_aa-tRNA_6
	Species s80S_aa_tRNA_eEF2_GTP_6 s80S_aa_tRNA_eEF2_GTP_6() #80S_aa-tRNA_eEF2_GTP_6
	Species s80S_tRNA_6 s80S_tRNA_6() #80S_tRNA_6
	Species s80S_tRNA_eEF3_GTP_6 s80S_tRNA_eEF3_GTP_6() #80S_tRNA_eEF3_GTP_6
	Species s80S_7 s80S_7() #80S_7
	Species s80S_aa_tRNA_eEF1A_GTP_7 s80S_aa_tRNA_eEF1A_GTP_7() #80S_aa-tRNA_eEF1A_GTP_7
	Species s80S_aa_tRNA_7 s80S_aa_tRNA_7() #80S_aa-tRNA_7
	Species s80S_aa_tRNA_eEF2_GTP_7 s80S_aa_tRNA_eEF2_GTP_7() #80S_aa-tRNA_eEF2_GTP_7
	Species s80S_tRNA_7 s80S_tRNA_7() #80S_tRNA_7
	Species s80S_tRNA_eEF3_GTP_7 s80S_tRNA_eEF3_GTP_7() #80S_tRNA_eEF3_GTP_7
	Species s80S_8 s80S_8() #80S_8
	Species s80S_aa_tRNA_eEF1A_GTP_8 s80S_aa_tRNA_eEF1A_GTP_8() #80S_aa-tRNA_eEF1A_GTP_8
	Species s80S_aa_tRNA_8 s80S_aa_tRNA_8() #80S_aa-tRNA_8
	Species s80S_aa_tRNA_eEF2_GTP_8 s80S_aa_tRNA_eEF2_GTP_8() #80S_aa-tRNA_eEF2_GTP_8
	Species s80S_tRNA_8 s80S_tRNA_8() #80S_tRNA_8
	Species s80S_tRNA_eEF3_GTP_8 s80S_tRNA_eEF3_GTP_8() #80S_tRNA_eEF3_GTP_8
	Species s80S_9 s80S_9() #80S_9
	Species s80S_aa_tRNA_eEF1A_GTP_9 s80S_aa_tRNA_eEF1A_GTP_9() #80S_aa-tRNA_eEF1A_GTP_9
	Species s80S_aa_tRNA_9 s80S_aa_tRNA_9() #80S_aa-tRNA_9
	Species s80S_aa_tRNA_eEF2_GTP_9 s80S_aa_tRNA_eEF2_GTP_9() #80S_aa-tRNA_eEF2_GTP_9
	Species s80S_tRNA_9 s80S_tRNA_9() #80S_tRNA_9
	Species s80S_tRNA_eEF3_GTP_9 s80S_tRNA_eEF3_GTP_9() #80S_tRNA_eEF3_GTP_9
	Species s80S_10 s80S_10() #80S_10
	Species s80S_aa_tRNA_eEF1A_GTP_10 s80S_aa_tRNA_eEF1A_GTP_10() #80S_aa-tRNA_eEF1A_GTP_10
	Species s80S_aa_tRNA_10 s80S_aa_tRNA_10() #80S_aa-tRNA_10
	Species s80S_aa_tRNA_eEF2_GTP_10 s80S_aa_tRNA_eEF2_GTP_10() #80S_aa-tRNA_eEF2_GTP_10
	Species s80S_tRNA_10 s80S_tRNA_10() #80S_tRNA_10
	Species s80S_tRNA_eEF3_GTP_10 s80S_tRNA_eEF3_GTP_10() #80S_tRNA_eEF3_GTP_10
	Species s80S_11 s80S_11() #80S_11
	Species s80S_aa_tRNA_eEF1A_GTP_11 s80S_aa_tRNA_eEF1A_GTP_11() #80S_aa-tRNA_eEF1A_GTP_11
	Species s80S_aa_tRNA_11 s80S_aa_tRNA_11() #80S_aa-tRNA_11
	Species s80S_aa_tRNA_eEF2_GTP_11 s80S_aa_tRNA_eEF2_GTP_11() #80S_aa-tRNA_eEF2_GTP_11
	Species s80S_tRNA_11 s80S_tRNA_11() #80S_tRNA_11
	Species s80S_tRNA_eEF3_GTP_11 s80S_tRNA_eEF3_GTP_11() #80S_tRNA_eEF3_GTP_11
	Species s80S_12 s80S_12() #80S_12
	Species s80S_aa_tRNA_eEF1A_GTP_12 s80S_aa_tRNA_eEF1A_GTP_12() #80S_aa-tRNA_eEF1A_GTP_12
	Species s80S_aa_tRNA_12 s80S_aa_tRNA_12() #80S_aa-tRNA_12
	Species s80S_aa_tRNA_eEF2_GTP_12 s80S_aa_tRNA_eEF2_GTP_12() #80S_aa-tRNA_eEF2_GTP_12
	Species s80S_tRNA_12 s80S_tRNA_12() #80S_tRNA_12
	Species s80S_tRNA_eEF3_GTP_12 s80S_tRNA_eEF3_GTP_12() #80S_tRNA_eEF3_GTP_12
	Species s80S_13 s80S_13() #80S_13
	Species s80S_aa_tRNA_eEF1A_GTP_13 s80S_aa_tRNA_eEF1A_GTP_13() #80S_aa-tRNA_eEF1A_GTP_13
	Species s80S_aa_tRNA_13 s80S_aa_tRNA_13() #80S_aa-tRNA_13
	Species s80S_aa_tRNA_eEF2_GTP_13 s80S_aa_tRNA_eEF2_GTP_13() #80S_aa-tRNA_eEF2_GTP_13
	Species s80S_tRNA_13 s80S_tRNA_13() #80S_tRNA_13
	Species s80S_tRNA_eEF3_GTP_13 s80S_tRNA_eEF3_GTP_13() #80S_tRNA_eEF3_GTP_13
	Species s80S_14 s80S_14() #80S_14
	Species s80S_aa_tRNA_eEF1A_GTP_14 s80S_aa_tRNA_eEF1A_GTP_14() #80S_aa-tRNA_eEF1A_GTP_14
	Species s80S_aa_tRNA_14 s80S_aa_tRNA_14() #80S_aa-tRNA_14
	Species s80S_aa_tRNA_eEF2_GTP_14 s80S_aa_tRNA_eEF2_GTP_14() #80S_aa-tRNA_eEF2_GTP_14
	Species s80S_tRNA_14 s80S_tRNA_14() #80S_tRNA_14
	Species s80S_tRNA_eEF3_GTP_14 s80S_tRNA_eEF3_GTP_14() #80S_tRNA_eEF3_GTP_14
	Species s80S_15 s80S_15() #80S_15
	Species s80S_aa_tRNA_eEF1A_GTP_15 s80S_aa_tRNA_eEF1A_GTP_15() #80S_aa-tRNA_eEF1A_GTP_15
	Species s80S_aa_tRNA_15 s80S_aa_tRNA_15() #80S_aa-tRNA_15
	Species s80S_aa_tRNA_eEF2_GTP_15 s80S_aa_tRNA_eEF2_GTP_15() #80S_aa-tRNA_eEF2_GTP_15
	Species s80S_tRNA_15 s80S_tRNA_15() #80S_tRNA_15
	Species s80S_tRNA_eEF3_GTP_15 s80S_tRNA_eEF3_GTP_15() #80S_tRNA_eEF3_GTP_15
	Species s80S_16 s80S_16() #80S_16
	Species s80S_aa_tRNA_eEF1A_GTP_16 s80S_aa_tRNA_eEF1A_GTP_16() #80S_aa-tRNA_eEF1A_GTP_16
	Species s80S_aa_tRNA_16 s80S_aa_tRNA_16() #80S_aa-tRNA_16
	Species s80S_aa_tRNA_eEF2_GTP_16 s80S_aa_tRNA_eEF2_GTP_16() #80S_aa-tRNA_eEF2_GTP_16
	Species s80S_tRNA_16 s80S_tRNA_16() #80S_tRNA_16
	Species s80S_tRNA_eEF3_GTP_16 s80S_tRNA_eEF3_GTP_16() #80S_tRNA_eEF3_GTP_16
	Species s80S_17 s80S_17() #80S_17
	Species s80S_aa_tRNA_eEF1A_GTP_17 s80S_aa_tRNA_eEF1A_GTP_17() #80S_aa-tRNA_eEF1A_GTP_17
	Species s80S_aa_tRNA_17 s80S_aa_tRNA_17() #80S_aa-tRNA_17
	Species s80S_aa_tRNA_eEF2_GTP_17 s80S_aa_tRNA_eEF2_GTP_17() #80S_aa-tRNA_eEF2_GTP_17
	Species s80S_tRNA_17 s80S_tRNA_17() #80S_tRNA_17
	Species s80S_tRNA_eEF3_GTP_17 s80S_tRNA_eEF3_GTP_17() #80S_tRNA_eEF3_GTP_17
	Species s80S_18 s80S_18() #80S_18
	Species s80S_aa_tRNA_eEF1A_GTP_18 s80S_aa_tRNA_eEF1A_GTP_18() #80S_aa-tRNA_eEF1A_GTP_18
	Species s80S_aa_tRNA_18 s80S_aa_tRNA_18() #80S_aa-tRNA_18
	Species s80S_aa_tRNA_eEF2_GTP_18 s80S_aa_tRNA_eEF2_GTP_18() #80S_aa-tRNA_eEF2_GTP_18
	Species s80S_tRNA_18 s80S_tRNA_18() #80S_tRNA_18
	Species s80S_tRNA_eEF3_GTP_18 s80S_tRNA_eEF3_GTP_18() #80S_tRNA_eEF3_GTP_18
	Species s80S_19 s80S_19() #80S_19
	Species s80S_aa_tRNA_eEF1A_GTP_19 s80S_aa_tRNA_eEF1A_GTP_19() #80S_aa-tRNA_eEF1A_GTP_19
	Species s80S_aa_tRNA_19 s80S_aa_tRNA_19() #80S_aa-tRNA_19
	Species s80S_aa_tRNA_eEF2_GTP_19 s80S_aa_tRNA_eEF2_GTP_19() #80S_aa-tRNA_eEF2_GTP_19
	Species s80S_tRNA_19 s80S_tRNA_19() #80S_tRNA_19
	Species s80S_tRNA_eEF3_GTP_19 s80S_tRNA_eEF3_GTP_19() #80S_tRNA_eEF3_GTP_19
	Species s80S_20 s80S_20() #80S_20
	Species s80S_tRNA_20 s80S_tRNA_20() #80S_tRNA_20
	Species s80S_tRNA_eEF3_GTP_20 s80S_tRNA_eEF3_GTP_20() #80S_tRNA_eEF3_GTP_20
	Species eRF3_GDP eRF3_GDP() #eRF3_GDP
	Species eRF3_GTP eRF3_GTP() #eRF3_GTP
	Species eRF1 eRF1() #eRF1
	Species eRF1_eRF3_GTP eRF1_eRF3_GTP() #eRF1_eRF3_GTP
	Species s80S_eRF1_eRF3_GTP s80S_eRF1_eRF3_GTP() #80S_eRF1_eRF3_GTP
	Species eIF4A_eIF4E_eIF4G_mRNA_Pab1 eIF4A_eIF4E_eIF4G_mRNA_Pab1() #eIF4A_eIF4E_eIF4G_mRNA_Pab1
end observables
begin functions
	parameter_10() = s80S_1 + s80S_10 + s80S_11 + s80S_12 + s80S_13 + s80S_14 + s80S_15 + s80S_16 + s80S_17 + s80S_18 + s80S_19 + s80S_2 + s80S_20 + s80S_3 + s80S_4 + s80S_5 + s80S_6 + s80S_7 + s80S_8 + s80S_9 + s80S_aa_tRNA_1 + s80S_aa_tRNA_10 + s80S_aa_tRNA_11 + s80S_aa_tRNA_12 + s80S_aa_tRNA_13 + s80S_aa_tRNA_14 + s80S_aa_tRNA_15 + s80S_aa_tRNA_16 + s80S_aa_tRNA_17 + s80S_aa_tRNA_18 + s80S_aa_tRNA_19 + s80S_aa_tRNA_2 + s80S_aa_tRNA_3 + s80S_aa_tRNA_4 + s80S_aa_tRNA_5 + s80S_aa_tRNA_6 + s80S_aa_tRNA_7 + s80S_aa_tRNA_8 + s80S_aa_tRNA_9 + s80S_aa_tRNA_eEF1A_GTP_1 + s80S_aa_tRNA_eEF1A_GTP_10 + s80S_aa_tRNA_eEF1A_GTP_11 + s80S_aa_tRNA_eEF1A_GTP_12 + s80S_aa_tRNA_eEF1A_GTP_13 + s80S_aa_tRNA_eEF1A_GTP_14 + s80S_aa_tRNA_eEF1A_GTP_15 + s80S_aa_tRNA_eEF1A_GTP_16 + s80S_aa_tRNA_eEF1A_GTP_17 + s80S_aa_tRNA_eEF1A_GTP_18 + s80S_aa_tRNA_eEF1A_GTP_19 + s80S_aa_tRNA_eEF1A_GTP_2 + s80S_aa_tRNA_eEF1A_GTP_3 + s80S_aa_tRNA_eEF1A_GTP_4 + s80S_aa_tRNA_eEF1A_GTP_5 + s80S_aa_tRNA_eEF1A_GTP_6 + s80S_aa_tRNA_eEF1A_GTP_7 + s80S_aa_tRNA_eEF1A_GTP_8 + s80S_aa_tRNA_eEF1A_GTP_9 + s80S_aa_tRNA_eEF2_GTP_1 + s80S_aa_tRNA_eEF2_GTP_10 + s80S_aa_tRNA_eEF2_GTP_11 + s80S_aa_tRNA_eEF2_GTP_12 + s80S_aa_tRNA_eEF2_GTP_13 + s80S_aa_tRNA_eEF2_GTP_14 + s80S_aa_tRNA_eEF2_GTP_15 + s80S_aa_tRNA_eEF2_GTP_16 + s80S_aa_tRNA_eEF2_GTP_17 + s80S_aa_tRNA_eEF2_GTP_18 + s80S_aa_tRNA_eEF2_GTP_19 + s80S_aa_tRNA_eEF2_GTP_2 + s80S_aa_tRNA_eEF2_GTP_3 + s80S_aa_tRNA_eEF2_GTP_4 + s80S_aa_tRNA_eEF2_GTP_5 + s80S_aa_tRNA_eEF2_GTP_6 + s80S_aa_tRNA_eEF2_GTP_7 + s80S_aa_tRNA_eEF2_GTP_8 + s80S_aa_tRNA_eEF2_GTP_9 + s80S_eRF1_eRF3_GTP + s80S_tRNA_10 + s80S_tRNA_11 + s80S_tRNA_12 + s80S_tRNA_13 + s80S_tRNA_14 + s80S_tRNA_15 + s80S_tRNA_16 + s80S_tRNA_17 + s80S_tRNA_18 + s80S_tRNA_19 + s80S_tRNA_2 + s80S_tRNA_20 + s80S_tRNA_3 + s80S_tRNA_4 + s80S_tRNA_5 + s80S_tRNA_6 + s80S_tRNA_7 + s80S_tRNA_8 + s80S_tRNA_9 + s80S_tRNA_eEF3_GTP_10 + s80S_tRNA_eEF3_GTP_11 + s80S_tRNA_eEF3_GTP_12 + s80S_tRNA_eEF3_GTP_13 + s80S_tRNA_eEF3_GTP_14 + s80S_tRNA_eEF3_GTP_15 + s80S_tRNA_eEF3_GTP_16 + s80S_tRNA_eEF3_GTP_17 + s80S_tRNA_eEF3_GTP_18 + s80S_tRNA_eEF3_GTP_19 + s80S_tRNA_eEF3_GTP_2 + s80S_tRNA_eEF3_GTP_20 + s80S_tRNA_eEF3_GTP_3 + s80S_tRNA_eEF3_GTP_4 + s80S_tRNA_eEF3_GTP_5 + s80S_tRNA_eEF3_GTP_6 + s80S_tRNA_eEF3_GTP_7 + s80S_tRNA_eEF3_GTP_8 + s80S_tRNA_eEF3_GTP_9
	parameter_11() = parameter_1 - parameter_10
	fRate17() = 13072000000000.0*s48S_Ded1_eIF5B_GTP*s60S*(parameter_1 - s80S_1 - s80S_10 - s80S_11 - s80S_12 - s80S_13 - s80S_14 - s80S_15 - s80S_2 - s80S_3 - s80S_4 - s80S_5 - s80S_6 - s80S_7 - s80S_8 - s80S_9 - s80S_aa_tRNA_1 - s80S_aa_tRNA_10 - s80S_aa_tRNA_11 - s80S_aa_tRNA_12 - s80S_aa_tRNA_13 - s80S_aa_tRNA_14 - s80S_aa_tRNA_15 - s80S_aa_tRNA_2 - s80S_aa_tRNA_3 - s80S_aa_tRNA_4 - s80S_aa_tRNA_5 - s80S_aa_tRNA_6 - s80S_aa_tRNA_7 - s80S_aa_tRNA_8 - s80S_aa_tRNA_9 - s80S_aa_tRNA_eEF1A_GTP_1 - s80S_aa_tRNA_eEF1A_GTP_10 - s80S_aa_tRNA_eEF1A_GTP_11 - s80S_aa_tRNA_eEF1A_GTP_12 - s80S_aa_tRNA_eEF1A_GTP_13 - s80S_aa_tRNA_eEF1A_GTP_14 - s80S_aa_tRNA_eEF1A_GTP_15 - s80S_aa_tRNA_eEF1A_GTP_2 - s80S_aa_tRNA_eEF1A_GTP_3 - s80S_aa_tRNA_eEF1A_GTP_4 - s80S_aa_tRNA_eEF1A_GTP_5 - s80S_aa_tRNA_eEF1A_GTP_6 - s80S_aa_tRNA_eEF1A_GTP_7 - s80S_aa_tRNA_eEF1A_GTP_8 - s80S_aa_tRNA_eEF1A_GTP_9 - s80S_aa_tRNA_eEF2_GTP_1 - s80S_aa_tRNA_eEF2_GTP_10 - s80S_aa_tRNA_eEF2_GTP_11 - s80S_aa_tRNA_eEF2_GTP_12 - s80S_aa_tRNA_eEF2_GTP_13 - s80S_aa_tRNA_eEF2_GTP_14 - s80S_aa_tRNA_eEF2_GTP_15 - s80S_aa_tRNA_eEF2_GTP_2 - s80S_aa_tRNA_eEF2_GTP_3 - s80S_aa_tRNA_eEF2_GTP_4 - s80S_aa_tRNA_eEF2_GTP_5 - s80S_aa_tRNA_eEF2_GTP_6 - s80S_aa_tRNA_eEF2_GTP_7 - s80S_aa_tRNA_eEF2_GTP_8 - s80S_aa_tRNA_eEF2_GTP_9 - s80S_tRNA_10 - s80S_tRNA_11 - s80S_tRNA_12 - s80S_tRNA_13 - s80S_tRNA_14 - s80S_tRNA_15 - s80S_tRNA_2 - s80S_tRNA_3 - s80S_tRNA_4 - s80S_tRNA_5 - s80S_tRNA_6 - s80S_tRNA_7 - s80S_tRNA_8 - s80S_tRNA_9 - s80S_tRNA_eEF3_GTP_10 - s80S_tRNA_eEF3_GTP_11 - s80S_tRNA_eEF3_GTP_12 - s80S_tRNA_eEF3_GTP_13 - s80S_tRNA_eEF3_GTP_14 - s80S_tRNA_eEF3_GTP_15 - s80S_tRNA_eEF3_GTP_2 - s80S_tRNA_eEF3_GTP_3 - s80S_tRNA_eEF3_GTP_4 - s80S_tRNA_eEF3_GTP_5 - s80S_tRNA_eEF3_GTP_6 - s80S_tRNA_eEF3_GTP_7 - s80S_tRNA_eEF3_GTP_8 - s80S_tRNA_eEF3_GTP_9)
	fRate26() = parameter_7*s80S_aa_tRNA_eEF2_GTP_1*(parameter_1 - s80S_10 - s80S_11 - s80S_12 - s80S_13 - s80S_14 - s80S_15 - s80S_16 - s80S_2 - s80S_3 - s80S_4 - s80S_5 - s80S_6 - s80S_7 - s80S_8 - s80S_9 - s80S_aa_tRNA_10 - s80S_aa_tRNA_11 - s80S_aa_tRNA_12 - s80S_aa_tRNA_13 - s80S_aa_tRNA_14 - s80S_aa_tRNA_15 - s80S_aa_tRNA_16 - s80S_aa_tRNA_2 - s80S_aa_tRNA_3 - s80S_aa_tRNA_4 - s80S_aa_tRNA_5 - s80S_aa_tRNA_6 - s80S_aa_tRNA_7 - s80S_aa_tRNA_8 - s80S_aa_tRNA_9 - s80S_aa_tRNA_eEF1A_GTP_10 - s80S_aa_tRNA_eEF1A_GTP_11 - s80S_aa_tRNA_eEF1A_GTP_12 - s80S_aa_tRNA_eEF1A_GTP_13 - s80S_aa_tRNA_eEF1A_GTP_14 - s80S_aa_tRNA_eEF1A_GTP_15 - s80S_aa_tRNA_eEF1A_GTP_16 - s80S_aa_tRNA_eEF1A_GTP_2 - s80S_aa_tRNA_eEF1A_GTP_3 - s80S_aa_tRNA_eEF1A_GTP_4 - s80S_aa_tRNA_eEF1A_GTP_5 - s80S_aa_tRNA_eEF1A_GTP_6 - s80S_aa_tRNA_eEF1A_GTP_7 - s80S_aa_tRNA_eEF1A_GTP_8 - s80S_aa_tRNA_eEF1A_GTP_9 - s80S_aa_tRNA_eEF2_GTP_10 - s80S_aa_tRNA_eEF2_GTP_11 - s80S_aa_tRNA_eEF2_GTP_12 - s80S_aa_tRNA_eEF2_GTP_13 - s80S_aa_tRNA_eEF2_GTP_14 - s80S_aa_tRNA_eEF2_GTP_15 - s80S_aa_tRNA_eEF2_GTP_16 - s80S_aa_tRNA_eEF2_GTP_2 - s80S_aa_tRNA_eEF2_GTP_3 - s80S_aa_tRNA_eEF2_GTP_4 - s80S_aa_tRNA_eEF2_GTP_5 - s80S_aa_tRNA_eEF2_GTP_6 - s80S_aa_tRNA_eEF2_GTP_7 - s80S_aa_tRNA_eEF2_GTP_8 - s80S_aa_tRNA_eEF2_GTP_9 - s80S_tRNA_10 - s80S_tRNA_11 - s80S_tRNA_12 - s80S_tRNA_13 - s80S_tRNA_14 - s80S_tRNA_15 - s80S_tRNA_16 - s80S_tRNA_2 - s80S_tRNA_3 - s80S_tRNA_4 - s80S_tRNA_5 - s80S_tRNA_6 - s80S_tRNA_7 - s80S_tRNA_8 - s80S_tRNA_9 - s80S_tRNA_eEF3_GTP_10 - s80S_tRNA_eEF3_GTP_11 - s80S_tRNA_eEF3_GTP_12 - s80S_tRNA_eEF3_GTP_13 - s80S_tRNA_eEF3_GTP_14 - s80S_tRNA_eEF3_GTP_15 - s80S_tRNA_eEF3_GTP_16 - s80S_tRNA_eEF3_GTP_2 - s80S_tRNA_eEF3_GTP_3 - s80S_tRNA_eEF3_GTP_4 - s80S_tRNA_eEF3_GTP_5 - s80S_tRNA_eEF3_GTP_6 - s80S_tRNA_eEF3_GTP_7 - s80S_tRNA_eEF3_GTP_8 - s80S_tRNA_eEF3_GTP_9)/(parameter_1 - s80S_10 - s80S_11 - s80S_12 - s80S_13 - s80S_14 - s80S_15 - s80S_2 - s80S_3 - s80S_4 - s80S_5 - s80S_6 - s80S_7 - s80S_8 - s80S_9 - s80S_aa_tRNA_10 - s80S_aa_tRNA_11 - s80S_aa_tRNA_12 - s80S_aa_tRNA_13 - s80S_aa_tRNA_14 - s80S_aa_tRNA_15 - s80S_aa_tRNA_2 - s80S_aa_tRNA_3 - s80S_aa_tRNA_4 - s80S_aa_tRNA_5 - s80S_aa_tRNA_6 - s80S_aa_tRNA_7 - s80S_aa_tRNA_8 - s80S_aa_tRNA_9 - s80S_aa_tRNA_eEF1A_GTP_10 - s80S_aa_tRNA_eEF1A_GTP_11 - s80S_aa_tRNA_eEF1A_GTP_12 - s80S_aa_tRNA_eEF1A_GTP_13 - s80S_aa_tRNA_eEF1A_GTP_14 - s80S_aa_tRNA_eEF1A_GTP_15 - s80S_aa_tRNA_eEF1A_GTP_2 - s80S_aa_tRNA_eEF1A_GTP_3 - s80S_aa_tRNA_eEF1A_GTP_4 - s80S_aa_tRNA_eEF1A_GTP_5 - s80S_aa_tRNA_eEF1A_GTP_6 - s80S_aa_tRNA_eEF1A_GTP_7 - s80S_aa_tRNA_eEF1A_GTP_8 - s80S_aa_tRNA_eEF1A_GTP_9 - s80S_aa_tRNA_eEF2_GTP_10 - s80S_aa_tRNA_eEF2_GTP_11 - s80S_aa_tRNA_eEF2_GTP_12 - s80S_aa_tRNA_eEF2_GTP_13 - s80S_aa_tRNA_eEF2_GTP_14 - s80S_aa_tRNA_eEF2_GTP_15 - s80S_aa_tRNA_eEF2_GTP_2 - s80S_aa_tRNA_eEF2_GTP_3 - s80S_aa_tRNA_eEF2_GTP_4 - s80S_aa_tRNA_eEF2_GTP_5 - s80S_aa_tRNA_eEF2_GTP_6 - s80S_aa_tRNA_eEF2_GTP_7 - s80S_aa_tRNA_eEF2_GTP_8 - s80S_aa_tRNA_eEF2_GTP_9 - s80S_tRNA_10 - s80S_tRNA_11 - s80S_tRNA_12 - s80S_tRNA_13 - s80S_tRNA_14 - s80S_tRNA_15 - s80S_tRNA_2 - s80S_tRNA_3 - s80S_tRNA_4 - s80S_tRNA_5 - s80S_tRNA_6 - s80S_tRNA_7 - s80S_tRNA_8 - s80S_tRNA_9 - s80S_tRNA_eEF3_GTP_10 - s80S_tRNA_eEF3_GTP_11 - s80S_tRNA_eEF3_GTP_12 - s80S_tRNA_eEF3_GTP_13 - s80S_tRNA_eEF3_GTP_14 - s80S_tRNA_eEF3_GTP_15 - s80S_tRNA_eEF3_GTP_2 - s80S_tRNA_eEF3_GTP_3 - s80S_tRNA_eEF3_GTP_4 - s80S_tRNA_eEF3_GTP_5 - s80S_tRNA_eEF3_GTP_6 - s80S_tRNA_eEF3_GTP_7 - s80S_tRNA_eEF3_GTP_8 - s80S_tRNA_eEF3_GTP_9)
	fRate30() = parameter_7*s80S_aa_tRNA_eEF2_GTP_2*(parameter_1 - s80S_10 - s80S_11 - s80S_12 - s80S_13 - s80S_14 - s80S_15 - s80S_16 - s80S_17 - s80S_3 - s80S_4 - s80S_5 - s80S_6 - s80S_7 - s80S_8 - s80S_9 - s80S_aa_tRNA_10 - s80S_aa_tRNA_11 - s80S_aa_tRNA_12 - s80S_aa_tRNA_13 - s80S_aa_tRNA_14 - s80S_aa_tRNA_15 - s80S_aa_tRNA_16 - s80S_aa_tRNA_17 - s80S_aa_tRNA_3 - s80S_aa_tRNA_4 - s80S_aa_tRNA_5 - s80S_aa_tRNA_6 - s80S_aa_tRNA_7 - s80S_aa_tRNA_8 - s80S_aa_tRNA_9 - s80S_aa_tRNA_eEF1A_GTP_10 - s80S_aa_tRNA_eEF1A_GTP_11 - s80S_aa_tRNA_eEF1A_GTP_12 - s80S_aa_tRNA_eEF1A_GTP_13 - s80S_aa_tRNA_eEF1A_GTP_14 - s80S_aa_tRNA_eEF1A_GTP_15 - s80S_aa_tRNA_eEF1A_GTP_16 - s80S_aa_tRNA_eEF1A_GTP_17 - s80S_aa_tRNA_eEF1A_GTP_3 - s80S_aa_tRNA_eEF1A_GTP_4 - s80S_aa_tRNA_eEF1A_GTP_5 - s80S_aa_tRNA_eEF1A_GTP_6 - s80S_aa_tRNA_eEF1A_GTP_7 - s80S_aa_tRNA_eEF1A_GTP_8 - s80S_aa_tRNA_eEF1A_GTP_9 - s80S_aa_tRNA_eEF2_GTP_10 - s80S_aa_tRNA_eEF2_GTP_11 - s80S_aa_tRNA_eEF2_GTP_12 - s80S_aa_tRNA_eEF2_GTP_13 - s80S_aa_tRNA_eEF2_GTP_14 - s80S_aa_tRNA_eEF2_GTP_15 - s80S_aa_tRNA_eEF2_GTP_16 - s80S_aa_tRNA_eEF2_GTP_17 - s80S_aa_tRNA_eEF2_GTP_3 - s80S_aa_tRNA_eEF2_GTP_4 - s80S_aa_tRNA_eEF2_GTP_5 - s80S_aa_tRNA_eEF2_GTP_6 - s80S_aa_tRNA_eEF2_GTP_7 - s80S_aa_tRNA_eEF2_GTP_8 - s80S_aa_tRNA_eEF2_GTP_9 - s80S_tRNA_10 - s80S_tRNA_11 - s80S_tRNA_12 - s80S_tRNA_13 - s80S_tRNA_14 - s80S_tRNA_15 - s80S_tRNA_16 - s80S_tRNA_17 - s80S_tRNA_3 - s80S_tRNA_4 - s80S_tRNA_5 - s80S_tRNA_6 - s80S_tRNA_7 - s80S_tRNA_8 - s80S_tRNA_9 - s80S_tRNA_eEF3_GTP_10 - s80S_tRNA_eEF3_GTP_11 - s80S_tRNA_eEF3_GTP_12 - s80S_tRNA_eEF3_GTP_13 - s80S_tRNA_eEF3_GTP_14 - s80S_tRNA_eEF3_GTP_15 - s80S_tRNA_eEF3_GTP_16 - s80S_tRNA_eEF3_GTP_17 - s80S_tRNA_eEF3_GTP_3 - s80S_tRNA_eEF3_GTP_4 - s80S_tRNA_eEF3_GTP_5 - s80S_tRNA_eEF3_GTP_6 - s80S_tRNA_eEF3_GTP_7 - s80S_tRNA_eEF3_GTP_8 - s80S_tRNA_eEF3_GTP_9)/(parameter_1 - s80S_10 - s80S_11 - s80S_12 - s80S_13 - s80S_14 - s80S_15 - s80S_16 - s80S_3 - s80S_4 - s80S_5 - s80S_6 - s80S_7 - s80S_8 - s80S_9 - s80S_aa_tRNA_10 - s80S_aa_tRNA_11 - s80S_aa_tRNA_12 - s80S_aa_tRNA_13 - s80S_aa_tRNA_14 - s80S_aa_tRNA_15 - s80S_aa_tRNA_16 - s80S_aa_tRNA_3 - s80S_aa_tRNA_4 - s80S_aa_tRNA_5 - s80S_aa_tRNA_6 - s80S_aa_tRNA_7 - s80S_aa_tRNA_8 - s80S_aa_tRNA_9 - s80S_aa_tRNA_eEF1A_GTP_10 - s80S_aa_tRNA_eEF1A_GTP_11 - s80S_aa_tRNA_eEF1A_GTP_12 - s80S_aa_tRNA_eEF1A_GTP_13 - s80S_aa_tRNA_eEF1A_GTP_14 - s80S_aa_tRNA_eEF1A_GTP_15 - s80S_aa_tRNA_eEF1A_GTP_16 - s80S_aa_tRNA_eEF1A_GTP_3 - s80S_aa_tRNA_eEF1A_GTP_4 - s80S_aa_tRNA_eEF1A_GTP_5 - s80S_aa_tRNA_eEF1A_GTP_6 - s80S_aa_tRNA_eEF1A_GTP_7 - s80S_aa_tRNA_eEF1A_GTP_8 - s80S_aa_tRNA_eEF1A_GTP_9 - s80S_aa_tRNA_eEF2_GTP_10 - s80S_aa_tRNA_eEF2_GTP_11 - s80S_aa_tRNA_eEF2_GTP_12 - s80S_aa_tRNA_eEF2_GTP_13 - s80S_aa_tRNA_eEF2_GTP_14 - s80S_aa_tRNA_eEF2_GTP_15 - s80S_aa_tRNA_eEF2_GTP_16 - s80S_aa_tRNA_eEF2_GTP_3 - s80S_aa_tRNA_eEF2_GTP_4 - s80S_aa_tRNA_eEF2_GTP_5 - s80S_aa_tRNA_eEF2_GTP_6 - s80S_aa_tRNA_eEF2_GTP_7 - s80S_aa_tRNA_eEF2_GTP_8 - s80S_aa_tRNA_eEF2_GTP_9 - s80S_tRNA_10 - s80S_tRNA_11 - s80S_tRNA_12 - s80S_tRNA_13 - s80S_tRNA_14 - s80S_tRNA_15 - s80S_tRNA_16 - s80S_tRNA_3 - s80S_tRNA_4 - s80S_tRNA_5 - s80S_tRNA_6 - s80S_tRNA_7 - s80S_tRNA_8 - s80S_tRNA_9 - s80S_tRNA_eEF3_GTP_10 - s80S_tRNA_eEF3_GTP_11 - s80S_tRNA_eEF3_GTP_12 - s80S_tRNA_eEF3_GTP_13 - s80S_tRNA_eEF3_GTP_14 - s80S_tRNA_eEF3_GTP_15 - s80S_tRNA_eEF3_GTP_16 - s80S_tRNA_eEF3_GTP_3 - s80S_tRNA_eEF3_GTP_4 - s80S_tRNA_eEF3_GTP_5 - s80S_tRNA_eEF3_GTP_6 - s80S_tRNA_eEF3_GTP_7 - s80S_tRNA_eEF3_GTP_8 - s80S_tRNA_eEF3_GTP_9)
	fRate36() = parameter_7*s80S_aa_tRNA_eEF2_GTP_3*(parameter_1 - s80S_10 - s80S_11 - s80S_12 - s80S_13 - s80S_14 - s80S_15 - s80S_16 - s80S_17 - s80S_18 - s80S_4 - s80S_5 - s80S_6 - s80S_7 - s80S_8 - s80S_9 - s80S_aa_tRNA_10 - s80S_aa_tRNA_11 - s80S_aa_tRNA_12 - s80S_aa_tRNA_13 - s80S_aa_tRNA_14 - s80S_aa_tRNA_15 - s80S_aa_tRNA_16 - s80S_aa_tRNA_17 - s80S_aa_tRNA_18 - s80S_aa_tRNA_4 - s80S_aa_tRNA_5 - s80S_aa_tRNA_6 - s80S_aa_tRNA_7 - s80S_aa_tRNA_8 - s80S_aa_tRNA_9 - s80S_aa_tRNA_eEF1A_GTP_10 - s80S_aa_tRNA_eEF1A_GTP_11 - s80S_aa_tRNA_eEF1A_GTP_12 - s80S_aa_tRNA_eEF1A_GTP_13 - s80S_aa_tRNA_eEF1A_GTP_14 - s80S_aa_tRNA_eEF1A_GTP_15 - s80S_aa_tRNA_eEF1A_GTP_16 - s80S_aa_tRNA_eEF1A_GTP_17 - s80S_aa_tRNA_eEF1A_GTP_18 - s80S_aa_tRNA_eEF1A_GTP_4 - s80S_aa_tRNA_eEF1A_GTP_5 - s80S_aa_tRNA_eEF1A_GTP_6 - s80S_aa_tRNA_eEF1A_GTP_7 - s80S_aa_tRNA_eEF1A_GTP_8 - s80S_aa_tRNA_eEF1A_GTP_9 - s80S_aa_tRNA_eEF2_GTP_10 - s80S_aa_tRNA_eEF2_GTP_11 - s80S_aa_tRNA_eEF2_GTP_12 - s80S_aa_tRNA_eEF2_GTP_13 - s80S_aa_tRNA_eEF2_GTP_14 - s80S_aa_tRNA_eEF2_GTP_15 - s80S_aa_tRNA_eEF2_GTP_16 - s80S_aa_tRNA_eEF2_GTP_17 - s80S_aa_tRNA_eEF2_GTP_18 - s80S_aa_tRNA_eEF2_GTP_4 - s80S_aa_tRNA_eEF2_GTP_5 - s80S_aa_tRNA_eEF2_GTP_6 - s80S_aa_tRNA_eEF2_GTP_7 - s80S_aa_tRNA_eEF2_GTP_8 - s80S_aa_tRNA_eEF2_GTP_9 - s80S_tRNA_10 - s80S_tRNA_11 - s80S_tRNA_12 - s80S_tRNA_13 - s80S_tRNA_14 - s80S_tRNA_15 - s80S_tRNA_16 - s80S_tRNA_17 - s80S_tRNA_18 - s80S_tRNA_4 - s80S_tRNA_5 - s80S_tRNA_6 - s80S_tRNA_7 - s80S_tRNA_8 - s80S_tRNA_9 - s80S_tRNA_eEF3_GTP_10 - s80S_tRNA_eEF3_GTP_11 - s80S_tRNA_eEF3_GTP_12 - s80S_tRNA_eEF3_GTP_13 - s80S_tRNA_eEF3_GTP_14 - s80S_tRNA_eEF3_GTP_15 - s80S_tRNA_eEF3_GTP_16 - s80S_tRNA_eEF3_GTP_17 - s80S_tRNA_eEF3_GTP_18 - s80S_tRNA_eEF3_GTP_4 - s80S_tRNA_eEF3_GTP_5 - s80S_tRNA_eEF3_GTP_6 - s80S_tRNA_eEF3_GTP_7 - s80S_tRNA_eEF3_GTP_8 - s80S_tRNA_eEF3_GTP_9)/(parameter_1 - s80S_10 - s80S_11 - s80S_12 - s80S_13 - s80S_14 - s80S_15 - s80S_16 - s80S_17 - s80S_4 - s80S_5 - s80S_6 - s80S_7 - s80S_8 - s80S_9 - s80S_aa_tRNA_10 - s80S_aa_tRNA_11 - s80S_aa_tRNA_12 - s80S_aa_tRNA_13 - s80S_aa_tRNA_14 - s80S_aa_tRNA_15 - s80S_aa_tRNA_16 - s80S_aa_tRNA_17 - s80S_aa_tRNA_4 - s80S_aa_tRNA_5 - s80S_aa_tRNA_6 - s80S_aa_tRNA_7 - s80S_aa_tRNA_8 - s80S_aa_tRNA_9 - s80S_aa_tRNA_eEF1A_GTP_10 - s80S_aa_tRNA_eEF1A_GTP_11 - s80S_aa_tRNA_eEF1A_GTP_12 - s80S_aa_tRNA_eEF1A_GTP_13 - s80S_aa_tRNA_eEF1A_GTP_14 - s80S_aa_tRNA_eEF1A_GTP_15 - s80S_aa_tRNA_eEF1A_GTP_16 - s80S_aa_tRNA_eEF1A_GTP_17 - s80S_aa_tRNA_eEF1A_GTP_4 - s80S_aa_tRNA_eEF1A_GTP_5 - s80S_aa_tRNA_eEF1A_GTP_6 - s80S_aa_tRNA_eEF1A_GTP_7 - s80S_aa_tRNA_eEF1A_GTP_8 - s80S_aa_tRNA_eEF1A_GTP_9 - s80S_aa_tRNA_eEF2_GTP_10 - s80S_aa_tRNA_eEF2_GTP_11 - s80S_aa_tRNA_eEF2_GTP_12 - s80S_aa_tRNA_eEF2_GTP_13 - s80S_aa_tRNA_eEF2_GTP_14 - s80S_aa_tRNA_eEF2_GTP_15 - s80S_aa_tRNA_eEF2_GTP_16 - s80S_aa_tRNA_eEF2_GTP_17 - s80S_aa_tRNA_eEF2_GTP_4 - s80S_aa_tRNA_eEF2_GTP_5 - s80S_aa_tRNA_eEF2_GTP_6 - s80S_aa_tRNA_eEF2_GTP_7 - s80S_aa_tRNA_eEF2_GTP_8 - s80S_aa_tRNA_eEF2_GTP_9 - s80S_tRNA_10 - s80S_tRNA_11 - s80S_tRNA_12 - s80S_tRNA_13 - s80S_tRNA_14 - s80S_tRNA_15 - s80S_tRNA_16 - s80S_tRNA_17 - s80S_tRNA_4 - s80S_tRNA_5 - s80S_tRNA_6 - s80S_tRNA_7 - s80S_tRNA_8 - s80S_tRNA_9 - s80S_tRNA_eEF3_GTP_10 - s80S_tRNA_eEF3_GTP_11 - s80S_tRNA_eEF3_GTP_12 - s80S_tRNA_eEF3_GTP_13 - s80S_tRNA_eEF3_GTP_14 - s80S_tRNA_eEF3_GTP_15 - s80S_tRNA_eEF3_GTP_16 - s80S_tRNA_eEF3_GTP_17 - s80S_tRNA_eEF3_GTP_4 - s80S_tRNA_eEF3_GTP_5 - s80S_tRNA_eEF3_GTP_6 - s80S_tRNA_eEF3_GTP_7 - s80S_tRNA_eEF3_GTP_8 - s80S_tRNA_eEF3_GTP_9)
	fRate42() = parameter_7*s80S_aa_tRNA_eEF2_GTP_4*(parameter_1 - s80S_10 - s80S_11 - s80S_12 - s80S_13 - s80S_14 - s80S_15 - s80S_16 - s80S_17 - s80S_18 - s80S_19 - s80S_5 - s80S_6 - s80S_7 - s80S_8 - s80S_9 - s80S_aa_tRNA_10 - s80S_aa_tRNA_11 - s80S_aa_tRNA_12 - s80S_aa_tRNA_13 - s80S_aa_tRNA_14 - s80S_aa_tRNA_15 - s80S_aa_tRNA_16 - s80S_aa_tRNA_17 - s80S_aa_tRNA_18 - s80S_aa_tRNA_19 - s80S_aa_tRNA_5 - s80S_aa_tRNA_6 - s80S_aa_tRNA_7 - s80S_aa_tRNA_8 - s80S_aa_tRNA_9 - s80S_aa_tRNA_eEF1A_GTP_10 - s80S_aa_tRNA_eEF1A_GTP_11 - s80S_aa_tRNA_eEF1A_GTP_12 - s80S_aa_tRNA_eEF1A_GTP_13 - s80S_aa_tRNA_eEF1A_GTP_14 - s80S_aa_tRNA_eEF1A_GTP_15 - s80S_aa_tRNA_eEF1A_GTP_16 - s80S_aa_tRNA_eEF1A_GTP_17 - s80S_aa_tRNA_eEF1A_GTP_18 - s80S_aa_tRNA_eEF1A_GTP_19 - s80S_aa_tRNA_eEF1A_GTP_5 - s80S_aa_tRNA_eEF1A_GTP_6 - s80S_aa_tRNA_eEF1A_GTP_7 - s80S_aa_tRNA_eEF1A_GTP_8 - s80S_aa_tRNA_eEF1A_GTP_9 - s80S_aa_tRNA_eEF2_GTP_10 - s80S_aa_tRNA_eEF2_GTP_11 - s80S_aa_tRNA_eEF2_GTP_12 - s80S_aa_tRNA_eEF2_GTP_13 - s80S_aa_tRNA_eEF2_GTP_14 - s80S_aa_tRNA_eEF2_GTP_15 - s80S_aa_tRNA_eEF2_GTP_16 - s80S_aa_tRNA_eEF2_GTP_17 - s80S_aa_tRNA_eEF2_GTP_18 - s80S_aa_tRNA_eEF2_GTP_19 - s80S_aa_tRNA_eEF2_GTP_5 - s80S_aa_tRNA_eEF2_GTP_6 - s80S_aa_tRNA_eEF2_GTP_7 - s80S_aa_tRNA_eEF2_GTP_8 - s80S_aa_tRNA_eEF2_GTP_9 - s80S_tRNA_10 - s80S_tRNA_11 - s80S_tRNA_12 - s80S_tRNA_13 - s80S_tRNA_14 - s80S_tRNA_15 - s80S_tRNA_16 - s80S_tRNA_17 - s80S_tRNA_18 - s80S_tRNA_19 - s80S_tRNA_5 - s80S_tRNA_6 - s80S_tRNA_7 - s80S_tRNA_8 - s80S_tRNA_9 - s80S_tRNA_eEF3_GTP_10 - s80S_tRNA_eEF3_GTP_11 - s80S_tRNA_eEF3_GTP_12 - s80S_tRNA_eEF3_GTP_13 - s80S_tRNA_eEF3_GTP_14 - s80S_tRNA_eEF3_GTP_15 - s80S_tRNA_eEF3_GTP_16 - s80S_tRNA_eEF3_GTP_17 - s80S_tRNA_eEF3_GTP_18 - s80S_tRNA_eEF3_GTP_19 - s80S_tRNA_eEF3_GTP_5 - s80S_tRNA_eEF3_GTP_6 - s80S_tRNA_eEF3_GTP_7 - s80S_tRNA_eEF3_GTP_8 - s80S_tRNA_eEF3_GTP_9)/(parameter_1 - s80S_10 - s80S_11 - s80S_12 - s80S_13 - s80S_14 - s80S_15 - s80S_16 - s80S_17 - s80S_18 - s80S_5 - s80S_6 - s80S_7 - s80S_8 - s80S_9 - s80S_aa_tRNA_10 - s80S_aa_tRNA_11 - s80S_aa_tRNA_12 - s80S_aa_tRNA_13 - s80S_aa_tRNA_14 - s80S_aa_tRNA_15 - s80S_aa_tRNA_16 - s80S_aa_tRNA_17 - s80S_aa_tRNA_18 - s80S_aa_tRNA_5 - s80S_aa_tRNA_6 - s80S_aa_tRNA_7 - s80S_aa_tRNA_8 - s80S_aa_tRNA_9 - s80S_aa_tRNA_eEF1A_GTP_10 - s80S_aa_tRNA_eEF1A_GTP_11 - s80S_aa_tRNA_eEF1A_GTP_12 - s80S_aa_tRNA_eEF1A_GTP_13 - s80S_aa_tRNA_eEF1A_GTP_14 - s80S_aa_tRNA_eEF1A_GTP_15 - s80S_aa_tRNA_eEF1A_GTP_16 - s80S_aa_tRNA_eEF1A_GTP_17 - s80S_aa_tRNA_eEF1A_GTP_18 - s80S_aa_tRNA_eEF1A_GTP_5 - s80S_aa_tRNA_eEF1A_GTP_6 - s80S_aa_tRNA_eEF1A_GTP_7 - s80S_aa_tRNA_eEF1A_GTP_8 - s80S_aa_tRNA_eEF1A_GTP_9 - s80S_aa_tRNA_eEF2_GTP_10 - s80S_aa_tRNA_eEF2_GTP_11 - s80S_aa_tRNA_eEF2_GTP_12 - s80S_aa_tRNA_eEF2_GTP_13 - s80S_aa_tRNA_eEF2_GTP_14 - s80S_aa_tRNA_eEF2_GTP_15 - s80S_aa_tRNA_eEF2_GTP_16 - s80S_aa_tRNA_eEF2_GTP_17 - s80S_aa_tRNA_eEF2_GTP_18 - s80S_aa_tRNA_eEF2_GTP_5 - s80S_aa_tRNA_eEF2_GTP_6 - s80S_aa_tRNA_eEF2_GTP_7 - s80S_aa_tRNA_eEF2_GTP_8 - s80S_aa_tRNA_eEF2_GTP_9 - s80S_tRNA_10 - s80S_tRNA_11 - s80S_tRNA_12 - s80S_tRNA_13 - s80S_tRNA_14 - s80S_tRNA_15 - s80S_tRNA_16 - s80S_tRNA_17 - s80S_tRNA_18 - s80S_tRNA_5 - s80S_tRNA_6 - s80S_tRNA_7 - s80S_tRNA_8 - s80S_tRNA_9 - s80S_tRNA_eEF3_GTP_10 - s80S_tRNA_eEF3_GTP_11 - s80S_tRNA_eEF3_GTP_12 - s80S_tRNA_eEF3_GTP_13 - s80S_tRNA_eEF3_GTP_14 - s80S_tRNA_eEF3_GTP_15 - s80S_tRNA_eEF3_GTP_16 - s80S_tRNA_eEF3_GTP_17 - s80S_tRNA_eEF3_GTP_18 - s80S_tRNA_eEF3_GTP_5 - s80S_tRNA_eEF3_GTP_6 - s80S_tRNA_eEF3_GTP_7 - s80S_tRNA_eEF3_GTP_8 - s80S_tRNA_eEF3_GTP_9)
	fRate48() = parameter_7*s80S_aa_tRNA_eEF2_GTP_5*(parameter_1 - s80S_10 - s80S_11 - s80S_12 - s80S_13 - s80S_14 - s80S_15 - s80S_16 - s80S_17 - s80S_18 - s80S_19 - s80S_20 - s80S_6 - s80S_7 - s80S_8 - s80S_9 - s80S_aa_tRNA_10 - s80S_aa_tRNA_11 - s80S_aa_tRNA_12 - s80S_aa_tRNA_13 - s80S_aa_tRNA_14 - s80S_aa_tRNA_15 - s80S_aa_tRNA_16 - s80S_aa_tRNA_17 - s80S_aa_tRNA_18 - s80S_aa_tRNA_19 - s80S_aa_tRNA_6 - s80S_aa_tRNA_7 - s80S_aa_tRNA_8 - s80S_aa_tRNA_9 - s80S_aa_tRNA_eEF1A_GTP_10 - s80S_aa_tRNA_eEF1A_GTP_11 - s80S_aa_tRNA_eEF1A_GTP_12 - s80S_aa_tRNA_eEF1A_GTP_13 - s80S_aa_tRNA_eEF1A_GTP_14 - s80S_aa_tRNA_eEF1A_GTP_15 - s80S_aa_tRNA_eEF1A_GTP_16 - s80S_aa_tRNA_eEF1A_GTP_17 - s80S_aa_tRNA_eEF1A_GTP_18 - s80S_aa_tRNA_eEF1A_GTP_19 - s80S_aa_tRNA_eEF1A_GTP_6 - s80S_aa_tRNA_eEF1A_GTP_7 - s80S_aa_tRNA_eEF1A_GTP_8 - s80S_aa_tRNA_eEF1A_GTP_9 - s80S_aa_tRNA_eEF2_GTP_10 - s80S_aa_tRNA_eEF2_GTP_11 - s80S_aa_tRNA_eEF2_GTP_12 - s80S_aa_tRNA_eEF2_GTP_13 - s80S_aa_tRNA_eEF2_GTP_14 - s80S_aa_tRNA_eEF2_GTP_15 - s80S_aa_tRNA_eEF2_GTP_16 - s80S_aa_tRNA_eEF2_GTP_17 - s80S_aa_tRNA_eEF2_GTP_18 - s80S_aa_tRNA_eEF2_GTP_19 - s80S_aa_tRNA_eEF2_GTP_6 - s80S_aa_tRNA_eEF2_GTP_7 - s80S_aa_tRNA_eEF2_GTP_8 - s80S_aa_tRNA_eEF2_GTP_9 - s80S_tRNA_10 - s80S_tRNA_11 - s80S_tRNA_12 - s80S_tRNA_13 - s80S_tRNA_14 - s80S_tRNA_15 - s80S_tRNA_16 - s80S_tRNA_17 - s80S_tRNA_18 - s80S_tRNA_19 - s80S_tRNA_20 - s80S_tRNA_6 - s80S_tRNA_7 - s80S_tRNA_8 - s80S_tRNA_9 - s80S_tRNA_eEF3_GTP_10 - s80S_tRNA_eEF3_GTP_11 - s80S_tRNA_eEF3_GTP_12 - s80S_tRNA_eEF3_GTP_13 - s80S_tRNA_eEF3_GTP_14 - s80S_tRNA_eEF3_GTP_15 - s80S_tRNA_eEF3_GTP_16 - s80S_tRNA_eEF3_GTP_17 - s80S_tRNA_eEF3_GTP_18 - s80S_tRNA_eEF3_GTP_19 - s80S_tRNA_eEF3_GTP_20 - s80S_tRNA_eEF3_GTP_6 - s80S_tRNA_eEF3_GTP_7 - s80S_tRNA_eEF3_GTP_8 - s80S_tRNA_eEF3_GTP_9)/(parameter_1 - s80S_10 - s80S_11 - s80S_12 - s80S_13 - s80S_14 - s80S_15 - s80S_16 - s80S_17 - s80S_18 - s80S_19 - s80S_6 - s80S_7 - s80S_8 - s80S_9 - s80S_aa_tRNA_10 - s80S_aa_tRNA_11 - s80S_aa_tRNA_12 - s80S_aa_tRNA_13 - s80S_aa_tRNA_14 - s80S_aa_tRNA_15 - s80S_aa_tRNA_16 - s80S_aa_tRNA_17 - s80S_aa_tRNA_18 - s80S_aa_tRNA_19 - s80S_aa_tRNA_6 - s80S_aa_tRNA_7 - s80S_aa_tRNA_8 - s80S_aa_tRNA_9 - s80S_aa_tRNA_eEF1A_GTP_10 - s80S_aa_tRNA_eEF1A_GTP_11 - s80S_aa_tRNA_eEF1A_GTP_12 - s80S_aa_tRNA_eEF1A_GTP_13 - s80S_aa_tRNA_eEF1A_GTP_14 - s80S_aa_tRNA_eEF1A_GTP_15 - s80S_aa_tRNA_eEF1A_GTP_16 - s80S_aa_tRNA_eEF1A_GTP_17 - s80S_aa_tRNA_eEF1A_GTP_18 - s80S_aa_tRNA_eEF1A_GTP_19 - s80S_aa_tRNA_eEF1A_GTP_6 - s80S_aa_tRNA_eEF1A_GTP_7 - s80S_aa_tRNA_eEF1A_GTP_8 - s80S_aa_tRNA_eEF1A_GTP_9 - s80S_aa_tRNA_eEF2_GTP_10 - s80S_aa_tRNA_eEF2_GTP_11 - s80S_aa_tRNA_eEF2_GTP_12 - s80S_aa_tRNA_eEF2_GTP_13 - s80S_aa_tRNA_eEF2_GTP_14 - s80S_aa_tRNA_eEF2_GTP_15 - s80S_aa_tRNA_eEF2_GTP_16 - s80S_aa_tRNA_eEF2_GTP_17 - s80S_aa_tRNA_eEF2_GTP_18 - s80S_aa_tRNA_eEF2_GTP_19 - s80S_aa_tRNA_eEF2_GTP_6 - s80S_aa_tRNA_eEF2_GTP_7 - s80S_aa_tRNA_eEF2_GTP_8 - s80S_aa_tRNA_eEF2_GTP_9 - s80S_tRNA_10 - s80S_tRNA_11 - s80S_tRNA_12 - s80S_tRNA_13 - s80S_tRNA_14 - s80S_tRNA_15 - s80S_tRNA_16 - s80S_tRNA_17 - s80S_tRNA_18 - s80S_tRNA_19 - s80S_tRNA_6 - s80S_tRNA_7 - s80S_tRNA_8 - s80S_tRNA_9 - s80S_tRNA_eEF3_GTP_10 - s80S_tRNA_eEF3_GTP_11 - s80S_tRNA_eEF3_GTP_12 - s80S_tRNA_eEF3_GTP_13 - s80S_tRNA_eEF3_GTP_14 - s80S_tRNA_eEF3_GTP_15 - s80S_tRNA_eEF3_GTP_16 - s80S_tRNA_eEF3_GTP_17 - s80S_tRNA_eEF3_GTP_18 - s80S_tRNA_eEF3_GTP_19 - s80S_tRNA_eEF3_GTP_6 - s80S_tRNA_eEF3_GTP_7 - s80S_tRNA_eEF3_GTP_8 - s80S_tRNA_eEF3_GTP_9)
end functions
begin reaction rules
	reaction_1: eIF2_GDP() + eIF2B() <-> eIF2_GDP_eIF2B() r1_k1,r1_k2 #Modifiers(species_1, species_2, species_3)
	reaction_2: eIF2_GDP_eIF2B() <-> eIF2_GTP() + eIF2B() r2_k1,r2_k2 #Modifiers(species_3, species_4, species_2)
	reaction_3: eIF2_GTP() + Met_tRNA() <-> eIF2_GTP_Met_tRNA() r3_k1,r3_k2 #Modifiers(species_4, species_5, species_6)
	reaction_4: eIF3() + eIF5() <-> eIF3_eIF5() r4_k1,r4_k2 #Modifiers(species_7, species_8, species_9)
	reaction_5: eIF2_GTP_Met_tRNA() + eIF3_eIF5() <-> eIF3_eIF5_eIF2_GTP_Met_tRNA() r5_k1,r5_k2 #Modifiers(species_6, species_9, species_10)
	reaction_6: eIF1() + eIF3_eIF5_eIF2_GTP_Met_tRNA() <-> eIF1_eIF3_eIF5_eIF2_GTP_Met_tRNA() r6_k1,r6_k2 #Modifiers(species_11, species_10, species_12)
	reaction_7: s40S() + eIF1A() -> s40S_eIF1A() r7_k1 #Modifiers(species_13, species_14)
	reaction_8: eIF1_eIF3_eIF5_eIF2_GTP_Met_tRNA() + s40S_eIF1A() -> s43S() r8_k1 #Modifiers(species_12, species_15)
	reaction_9: eIF4E() + eIF4G() <-> eIF4E_eIF4G() r9_k1,r9_k2 #Modifiers(species_17, species_18, species_19)
	reaction_10: mRNA_cap() + Pab1() <-> mRNA_Pab1() r10_k1,r10_k2 #Modifiers(species_20, species_21, species_22)
	reaction_11: eIF4E_eIF4G() + mRNA_Pab1() <-> eIF4E_eIF4G_mRNA_Pab1() r11_k1,r11_k2 #Modifiers(species_19, species_22, species_23)
	reaction_12: eIF4A() + eIF4E_eIF4G_mRNA_Pab1() <-> eIF4A_eIF4E_eIF4G_mRNA_Pab1() r12_k1,r12_k2 #Modifiers(species_24, species_23, species_166)
	reaction_13: eIF4B() + eIF4A_eIF4E_eIF4G_mRNA_Pab1() <-> eIF4E_eIF4G_mRNA_Pab1_eIF4A_eIF4B() r13_k1,r13_k2 #Modifiers(species_25, species_166, species_27)
	reaction_14: s43S() + eIF4E_eIF4G_mRNA_Pab1_eIF4A_eIF4B() -> s48S() r14_k1 #Modifiers(species_16, species_27)
	reaction_15: s48S() + Ded1() <-> s48S_Ded1() r15_k1,r15_k2 #Modifiers(species_28, species_29, species_30)
	reaction_16: eIF5B_GDP() <-> eIF5B_GTP() r16_k1,r16_k2 #Modifiers(species_31, species_32)
	reaction_17: s48S_Ded1() + eIF5B_GTP() <-> s48S_Ded1_eIF5B_GTP() r17_k1,r17_k2 #Modifiers(species_30, species_32, species_33)
	reaction_18_reactants_0: 0  -> s60S() -1*(fRate17()) #Modifiers(species_46, species_47, species_48, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_34, species_33, species_46, species_47, species_48, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133)
	reaction_18_reactants_1: 0  -> s48S_Ded1_eIF5B_GTP() -1*(fRate17()) #Modifiers(species_46, species_47, species_48, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_34, species_33, species_46, species_47, species_48, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133)
	reaction_18_products_0: 0  -> s80S_1() fRate17() #Modifiers(species_46, species_47, species_48, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_34, species_33, species_46, species_47, species_48, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133)
	reaction_18_products_1: 0  -> eIF1() fRate17() #Modifiers(species_46, species_47, species_48, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_34, species_33, species_46, species_47, species_48, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133)
	reaction_18_products_2: 0  -> eIF1A() fRate17() #Modifiers(species_46, species_47, species_48, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_34, species_33, species_46, species_47, species_48, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133)
	reaction_18_products_3: 0  -> eIF2_GDP() fRate17() #Modifiers(species_46, species_47, species_48, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_34, species_33, species_46, species_47, species_48, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133)
	reaction_18_products_4: 0  -> eIF3() fRate17() #Modifiers(species_46, species_47, species_48, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_34, species_33, species_46, species_47, species_48, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133)
	reaction_18_products_5: 0  -> eIF4A() fRate17() #Modifiers(species_46, species_47, species_48, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_34, species_33, species_46, species_47, species_48, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133)
	reaction_18_products_6: 0  -> eIF4B() fRate17() #Modifiers(species_46, species_47, species_48, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_34, species_33, species_46, species_47, species_48, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133)
	reaction_18_products_7: 0  -> eIF4E() fRate17() #Modifiers(species_46, species_47, species_48, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_34, species_33, species_46, species_47, species_48, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133)
	reaction_18_products_8: 0  -> eIF4G() fRate17() #Modifiers(species_46, species_47, species_48, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_34, species_33, species_46, species_47, species_48, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133)
	reaction_18_products_9: 0  -> eIF5() fRate17() #Modifiers(species_46, species_47, species_48, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_34, species_33, species_46, species_47, species_48, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133)
	reaction_18_products_10: 0  -> eIF5B_GDP() fRate17() #Modifiers(species_46, species_47, species_48, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_34, species_33, species_46, species_47, species_48, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133)
	reaction_18_products_11: 0  -> Pab1() fRate17() #Modifiers(species_46, species_47, species_48, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_34, species_33, species_46, species_47, species_48, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133)
	reaction_18_products_12: 0  -> mRNA_cap() fRate17() #Modifiers(species_46, species_47, species_48, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_34, species_33, species_46, species_47, species_48, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133)
	reaction_18_products_13: 0  -> Ded1() fRate17() #Modifiers(species_46, species_47, species_48, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_34, species_33, species_46, species_47, species_48, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133)
	reaction_19: eEF1A_GDP() + eEF1B() <-> eEF1A_GDP_eEF1B() r19_k1,r19_k2 #Modifiers(species_35, species_36, species_37)
	reaction_20: eEF1A_GDP_eEF1B() <-> eEF1A_GTP() + eEF1B() r20_k1,r20_k2 #Modifiers(species_37, species_38, species_36)
	reaction_21: eEF1A_GTP() + aa_tRNA() <-> aa_tRNA_eEF1A_GTP() r21_k1,r21_k2 #Modifiers(species_38, species_39, species_40)
	reaction_22: eEF2_GDP() <-> eEF2_GTP() r22_k1,r22_k2 #Modifiers(species_41, species_42)
	reaction_23: eEF3_GDP() <-> eEF3_GTP() r23_k1,r23_k2 #Modifiers(species_43, species_44)
	reaction_24: aa_tRNA_eEF1A_GTP() + s80S_1() <-> s80S_aa_tRNA_eEF1A_GTP_1() parameter_2,parameter_3 #Modifiers(species_40, species_46, species_47)
	reaction_25: s80S_aa_tRNA_eEF1A_GTP_1() -> s80S_aa_tRNA_1() + eEF1A_GDP() parameter_4 #Modifiers(species_47)
	reaction_26: eEF2_GTP() + s80S_aa_tRNA_1() <-> s80S_aa_tRNA_eEF2_GTP_1() parameter_5,parameter_6 #Modifiers(species_42, species_48, species_49)
	reaction_27_reactants_0: 0  -> s80S_aa_tRNA_eEF2_GTP_1() -1*(fRate26()) #Modifiers(species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_134, species_135, species_136, species_137, species_138, species_139, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_134, species_135, species_136, species_137, species_138, species_139)
	reaction_27_products_0: 0  -> s80S_tRNA_2() fRate26() #Modifiers(species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_134, species_135, species_136, species_137, species_138, species_139, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_134, species_135, species_136, species_137, species_138, species_139)
	reaction_27_products_1: 0  -> eEF2_GDP() fRate26() #Modifiers(species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_134, species_135, species_136, species_137, species_138, species_139, species_49, species_50, species_51, species_52, species_53, species_54, species_55, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_134, species_135, species_136, species_137, species_138, species_139)
	reaction_28: aa_tRNA_eEF1A_GTP() + s80S_2() <-> s80S_aa_tRNA_eEF1A_GTP_2() parameter_2,parameter_3 #Modifiers(species_40, species_50, species_51)
	reaction_29: s80S_aa_tRNA_eEF1A_GTP_2() -> s80S_aa_tRNA_2() + eEF1A_GDP() parameter_4 #Modifiers(species_51)
	reaction_30: eEF2_GTP() + s80S_aa_tRNA_2() <-> s80S_aa_tRNA_eEF2_GTP_2() parameter_5,parameter_6 #Modifiers(species_42, species_52, species_53)
	reaction_31_reactants_0: 0  -> s80S_aa_tRNA_eEF2_GTP_2() -1*(fRate30()) #Modifiers(species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_134, species_135, species_136, species_137, species_138, species_139, species_140, species_141, species_142, species_143, species_144, species_145, species_53, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_134, species_135, species_136, species_137, species_138, species_139, species_140, species_141, species_142, species_143, species_144, species_145)
	reaction_31_products_0: 0  -> s80S_tRNA_3() fRate30() #Modifiers(species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_134, species_135, species_136, species_137, species_138, species_139, species_140, species_141, species_142, species_143, species_144, species_145, species_53, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_134, species_135, species_136, species_137, species_138, species_139, species_140, species_141, species_142, species_143, species_144, species_145)
	reaction_31_products_1: 0  -> eEF2_GDP() fRate30() #Modifiers(species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_134, species_135, species_136, species_137, species_138, species_139, species_140, species_141, species_142, species_143, species_144, species_145, species_53, species_56, species_57, species_58, species_59, species_60, species_61, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_134, species_135, species_136, species_137, species_138, species_139, species_140, species_141, species_142, species_143, species_144, species_145)
	reaction_32: s80S_tRNA_2() + eEF3_GTP() -> s80S_tRNA_eEF3_GTP_2() parameter_8 #Modifiers(species_54, species_44)
	reaction_33: s80S_tRNA_eEF3_GTP_2() -> s80S_2() + eEF3_GDP() + tRNA() parameter_9 #Modifiers(species_55)
	reaction_34: aa_tRNA_eEF1A_GTP() + s80S_3() <-> s80S_aa_tRNA_eEF1A_GTP_3() parameter_2,parameter_3 #Modifiers(species_40, species_56, species_57)
	reaction_35: s80S_aa_tRNA_eEF1A_GTP_3() -> s80S_aa_tRNA_3() + eEF1A_GDP() parameter_4 #Modifiers(species_57)
	reaction_36: eEF2_GTP() + s80S_aa_tRNA_3() <-> s80S_aa_tRNA_eEF2_GTP_3() parameter_5,parameter_6 #Modifiers(species_42, species_58, species_59)
	reaction_37_reactants_0: 0  -> s80S_aa_tRNA_eEF2_GTP_3() -1*(fRate36()) #Modifiers(species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_134, species_135, species_136, species_137, species_138, species_139, species_140, species_141, species_142, species_143, species_144, species_145, species_146, species_147, species_148, species_149, species_150, species_151, species_59, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_134, species_135, species_136, species_137, species_138, species_139, species_140, species_141, species_142, species_143, species_144, species_145, species_146, species_147, species_148, species_149, species_150, species_151)
	reaction_37_products_0: 0  -> s80S_tRNA_4() fRate36() #Modifiers(species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_134, species_135, species_136, species_137, species_138, species_139, species_140, species_141, species_142, species_143, species_144, species_145, species_146, species_147, species_148, species_149, species_150, species_151, species_59, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_134, species_135, species_136, species_137, species_138, species_139, species_140, species_141, species_142, species_143, species_144, species_145, species_146, species_147, species_148, species_149, species_150, species_151)
	reaction_37_products_1: 0  -> eEF2_GDP() fRate36() #Modifiers(species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_134, species_135, species_136, species_137, species_138, species_139, species_140, species_141, species_142, species_143, species_144, species_145, species_146, species_147, species_148, species_149, species_150, species_151, species_59, species_62, species_63, species_64, species_65, species_66, species_67, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_134, species_135, species_136, species_137, species_138, species_139, species_140, species_141, species_142, species_143, species_144, species_145, species_146, species_147, species_148, species_149, species_150, species_151)
	reaction_38: s80S_tRNA_3() + eEF3_GTP() -> s80S_tRNA_eEF3_GTP_3() parameter_8 #Modifiers(species_60, species_44)
	reaction_39: s80S_tRNA_eEF3_GTP_3() -> s80S_3() + eEF3_GDP() + tRNA() parameter_9 #Modifiers(species_61)
	reaction_40: aa_tRNA_eEF1A_GTP() + s80S_4() <-> s80S_aa_tRNA_eEF1A_GTP_4() parameter_2,parameter_3 #Modifiers(species_40, species_62, species_63)
	reaction_41: s80S_aa_tRNA_eEF1A_GTP_4() -> s80S_aa_tRNA_4() + eEF1A_GDP() parameter_4 #Modifiers(species_63)
	reaction_42: eEF2_GTP() + s80S_aa_tRNA_4() <-> s80S_aa_tRNA_eEF2_GTP_4() parameter_5,parameter_6 #Modifiers(species_42, species_64, species_65)
	reaction_43_reactants_0: 0  -> s80S_aa_tRNA_eEF2_GTP_4() -1*(fRate42()) #Modifiers(species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_134, species_135, species_136, species_137, species_138, species_139, species_140, species_141, species_142, species_143, species_144, species_145, species_146, species_147, species_148, species_149, species_150, species_151, species_152, species_153, species_154, species_155, species_156, species_157, species_65, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_134, species_135, species_136, species_137, species_138, species_139, species_140, species_141, species_142, species_143, species_144, species_145, species_146, species_147, species_148, species_149, species_150, species_151, species_152, species_153, species_154, species_155, species_156, species_157)
	reaction_43_products_0: 0  -> s80S_tRNA_5() fRate42() #Modifiers(species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_134, species_135, species_136, species_137, species_138, species_139, species_140, species_141, species_142, species_143, species_144, species_145, species_146, species_147, species_148, species_149, species_150, species_151, species_152, species_153, species_154, species_155, species_156, species_157, species_65, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_134, species_135, species_136, species_137, species_138, species_139, species_140, species_141, species_142, species_143, species_144, species_145, species_146, species_147, species_148, species_149, species_150, species_151, species_152, species_153, species_154, species_155, species_156, species_157)
	reaction_43_products_1: 0  -> eEF2_GDP() fRate42() #Modifiers(species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_134, species_135, species_136, species_137, species_138, species_139, species_140, species_141, species_142, species_143, species_144, species_145, species_146, species_147, species_148, species_149, species_150, species_151, species_152, species_153, species_154, species_155, species_156, species_157, species_65, species_68, species_69, species_70, species_71, species_72, species_73, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_134, species_135, species_136, species_137, species_138, species_139, species_140, species_141, species_142, species_143, species_144, species_145, species_146, species_147, species_148, species_149, species_150, species_151, species_152, species_153, species_154, species_155, species_156, species_157)
	reaction_44: s80S_tRNA_4() + eEF3_GTP() -> s80S_tRNA_eEF3_GTP_4() parameter_8 #Modifiers(species_66, species_44)
	reaction_45: s80S_tRNA_eEF3_GTP_4() -> s80S_4() + eEF3_GDP() + tRNA() parameter_9 #Modifiers(species_67)
	reaction_46: aa_tRNA_eEF1A_GTP() + s80S_5() <-> s80S_aa_tRNA_eEF1A_GTP_5() parameter_2,parameter_3 #Modifiers(species_40, species_68, species_69)
	reaction_47: s80S_aa_tRNA_eEF1A_GTP_5() -> s80S_aa_tRNA_5() + eEF1A_GDP() parameter_4 #Modifiers(species_69)
	reaction_48: eEF2_GTP() + s80S_aa_tRNA_5() <-> s80S_aa_tRNA_eEF2_GTP_5() parameter_5,parameter_6 #Modifiers(species_42, species_70, species_71)
	reaction_49_reactants_0: 0  -> s80S_aa_tRNA_eEF2_GTP_5() -1*(fRate48()) #Modifiers(species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_134, species_135, species_136, species_137, species_138, species_139, species_140, species_141, species_142, species_143, species_144, species_145, species_146, species_147, species_148, species_149, species_150, species_151, species_152, species_153, species_154, species_155, species_156, species_157, species_158, species_159, species_160, species_71, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_134, species_135, species_136, species_137, species_138, species_139, species_140, species_141, species_142, species_143, species_144, species_145, species_146, species_147, species_148, species_149, species_150, species_151, species_152, species_153, species_154, species_155, species_156, species_157, species_158, species_159, species_160)
	reaction_49_products_0: 0  -> s80S_tRNA_6() fRate48() #Modifiers(species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_134, species_135, species_136, species_137, species_138, species_139, species_140, species_141, species_142, species_143, species_144, species_145, species_146, species_147, species_148, species_149, species_150, species_151, species_152, species_153, species_154, species_155, species_156, species_157, species_158, species_159, species_160, species_71, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_134, species_135, species_136, species_137, species_138, species_139, species_140, species_141, species_142, species_143, species_144, species_145, species_146, species_147, species_148, species_149, species_150, species_151, species_152, species_153, species_154, species_155, species_156, species_157, species_158, species_159, species_160)
	reaction_49_products_1: 0  -> eEF2_GDP() fRate48() #Modifiers(species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_134, species_135, species_136, species_137, species_138, species_139, species_140, species_141, species_142, species_143, species_144, species_145, species_146, species_147, species_148, species_149, species_150, species_151, species_152, species_153, species_154, species_155, species_156, species_157, species_158, species_159, species_160, species_71, species_74, species_75, species_76, species_77, species_78, species_79, species_80, species_81, species_82, species_83, species_84, species_85, species_86, species_87, species_88, species_89, species_90, species_91, species_92, species_93, species_94, species_95, species_96, species_97, species_98, species_99, species_100, species_101, species_102, species_103, species_104, species_105, species_106, species_107, species_108, species_109, species_110, species_111, species_112, species_113, species_114, species_115, species_116, species_117, species_118, species_119, species_120, species_121, species_122, species_123, species_124, species_125, species_126, species_127, species_128, species_129, species_130, species_131, species_132, species_133, species_134, species_135, species_136, species_137, species_138, species_139, species_140, species_141, species_142, species_143, species_144, species_145, species_146, species_147, species_148, species_149, species_150, species_151, species_152, species_153, species_154, species_155, species_156, species_157, species_158, species_159, species_160)
	reaction_50: s80S_tRNA_5() + eEF3_GTP() -> s80S_tRNA_eEF3_GTP_5() parameter_8 #Modifiers(species_72, species_44)
	reaction_51: s80S_tRNA_eEF3_GTP_5() -> s80S_5() + eEF3_GDP() + tRNA() parameter_9 #Modifiers(species_73)
	reaction_52: aa_tRNA_eEF1A_GTP() + s80S_6() <-> s80S_aa_tRNA_eEF1A_GTP_6() parameter_2,parameter_3 #Modifiers(species_40, species_74, species_75)
	reaction_53: s80S_aa_tRNA_eEF1A_GTP_6() -> s80S_aa_tRNA_6() + eEF1A_GDP() parameter_4 #Modifiers(species_75)
	reaction_54: eEF2_GTP() + s80S_aa_tRNA_6() <-> s80S_aa_tRNA_eEF2_GTP_6() parameter_5,parameter_6 #Modifiers(species_42, species_76, species_77)
	reaction_55: s80S_aa_tRNA_eEF2_GTP_6() -> s80S_tRNA_7() + eEF2_GDP() parameter_7 #Modifiers(species_77)
	reaction_56: s80S_tRNA_6() + eEF3_GTP() -> s80S_tRNA_eEF3_GTP_6() parameter_8 #Modifiers(species_78, species_44)
	reaction_57: s80S_tRNA_eEF3_GTP_6() -> s80S_6() + eEF3_GDP() + tRNA() parameter_9 #Modifiers(species_79)
	reaction_58: aa_tRNA_eEF1A_GTP() + s80S_7() <-> s80S_aa_tRNA_eEF1A_GTP_7() parameter_2,parameter_3 #Modifiers(species_40, species_80, species_81)
	reaction_59: s80S_aa_tRNA_eEF1A_GTP_7() -> s80S_aa_tRNA_7() + eEF1A_GDP() parameter_4 #Modifiers(species_81)
	reaction_60: eEF2_GTP() + s80S_aa_tRNA_7() <-> s80S_aa_tRNA_eEF2_GTP_7() parameter_5,parameter_6 #Modifiers(species_42, species_82, species_83)
	reaction_61: s80S_aa_tRNA_eEF2_GTP_7() -> s80S_tRNA_8() + eEF2_GDP() parameter_7 #Modifiers(species_83)
	reaction_62: s80S_tRNA_7() + eEF3_GTP() -> s80S_tRNA_eEF3_GTP_7() parameter_8 #Modifiers(species_84, species_44)
	reaction_63: s80S_tRNA_eEF3_GTP_7() -> s80S_7() + eEF3_GDP() + tRNA() parameter_9 #Modifiers(species_85)
	reaction_64: aa_tRNA_eEF1A_GTP() + s80S_8() <-> s80S_aa_tRNA_eEF1A_GTP_8() parameter_2,parameter_3 #Modifiers(species_40, species_86, species_87)
	reaction_65: s80S_aa_tRNA_eEF1A_GTP_8() -> s80S_aa_tRNA_8() + eEF1A_GDP() parameter_4 #Modifiers(species_87)
	reaction_66: eEF2_GTP() + s80S_aa_tRNA_8() <-> s80S_aa_tRNA_eEF2_GTP_8() parameter_5,parameter_6 #Modifiers(species_42, species_88, species_89)
	reaction_67: s80S_aa_tRNA_eEF2_GTP_8() -> s80S_tRNA_9() + eEF2_GDP() parameter_7 #Modifiers(species_89)
	reaction_68: s80S_tRNA_8() + eEF3_GTP() -> s80S_tRNA_eEF3_GTP_8() parameter_8 #Modifiers(species_90, species_44)
	reaction_69: s80S_tRNA_eEF3_GTP_8() -> s80S_8() + eEF3_GDP() + tRNA() parameter_9 #Modifiers(species_91)
	reaction_70: aa_tRNA_eEF1A_GTP() + s80S_9() <-> s80S_aa_tRNA_eEF1A_GTP_9() parameter_2,parameter_3 #Modifiers(species_40, species_92, species_93)
	reaction_71: s80S_aa_tRNA_eEF1A_GTP_9() -> s80S_aa_tRNA_9() + eEF1A_GDP() parameter_4 #Modifiers(species_93)
	reaction_72: eEF2_GTP() + s80S_aa_tRNA_9() <-> s80S_aa_tRNA_eEF2_GTP_9() parameter_5,parameter_6 #Modifiers(species_42, species_94, species_95)
	reaction_73: s80S_aa_tRNA_eEF2_GTP_9() -> s80S_tRNA_10() + eEF2_GDP() parameter_7 #Modifiers(species_95)
	reaction_74: s80S_tRNA_9() + eEF3_GTP() -> s80S_tRNA_eEF3_GTP_9() parameter_8 #Modifiers(species_96, species_44)
	reaction_75: s80S_tRNA_eEF3_GTP_9() -> s80S_9() + eEF3_GDP() + tRNA() parameter_9 #Modifiers(species_97)
	reaction_76: aa_tRNA_eEF1A_GTP() + s80S_10() <-> s80S_aa_tRNA_eEF1A_GTP_10() parameter_2,parameter_3 #Modifiers(species_40, species_98, species_99)
	reaction_77: s80S_aa_tRNA_eEF1A_GTP_10() -> s80S_aa_tRNA_10() + eEF1A_GDP() parameter_4 #Modifiers(species_99)
	reaction_78: eEF2_GTP() + s80S_aa_tRNA_10() <-> s80S_aa_tRNA_eEF2_GTP_10() parameter_5,parameter_6 #Modifiers(species_42, species_100, species_101)
	reaction_79: s80S_aa_tRNA_eEF2_GTP_10() -> s80S_tRNA_11() + eEF2_GDP() parameter_7 #Modifiers(species_101)
	reaction_80: s80S_tRNA_10() + eEF3_GTP() -> s80S_tRNA_eEF3_GTP_10() parameter_8 #Modifiers(species_102, species_44)
	reaction_81: s80S_tRNA_eEF3_GTP_10() -> s80S_10() + eEF3_GDP() + tRNA() parameter_9 #Modifiers(species_103)
	reaction_82: aa_tRNA_eEF1A_GTP() + s80S_11() <-> s80S_aa_tRNA_eEF1A_GTP_11() parameter_2,parameter_3 #Modifiers(species_40, species_104, species_105)
	reaction_83: s80S_aa_tRNA_eEF1A_GTP_11() -> s80S_aa_tRNA_11() + eEF1A_GDP() parameter_4 #Modifiers(species_105)
	reaction_84: eEF2_GTP() + s80S_aa_tRNA_11() <-> s80S_aa_tRNA_eEF2_GTP_11() parameter_5,parameter_6 #Modifiers(species_42, species_106, species_107)
	reaction_85: s80S_aa_tRNA_eEF2_GTP_11() -> s80S_tRNA_12() + eEF2_GDP() parameter_7 #Modifiers(species_107)
	reaction_86: s80S_tRNA_11() + eEF3_GTP() -> s80S_tRNA_eEF3_GTP_11() parameter_8 #Modifiers(species_108, species_44)
	reaction_87: s80S_tRNA_eEF3_GTP_11() -> s80S_11() + eEF3_GDP() + tRNA() parameter_9 #Modifiers(species_109)
	reaction_88: aa_tRNA_eEF1A_GTP() + s80S_12() <-> s80S_aa_tRNA_eEF1A_GTP_12() parameter_2,parameter_3 #Modifiers(species_40, species_110, species_111)
	reaction_89: s80S_aa_tRNA_eEF1A_GTP_12() -> s80S_aa_tRNA_12() + eEF1A_GDP() parameter_4 #Modifiers(species_111)
	reaction_90: eEF2_GTP() + s80S_aa_tRNA_12() <-> s80S_aa_tRNA_eEF2_GTP_12() parameter_5,parameter_6 #Modifiers(species_42, species_112, species_113)
	reaction_91: s80S_aa_tRNA_eEF2_GTP_12() -> s80S_tRNA_13() + eEF2_GDP() parameter_7 #Modifiers(species_113)
	reaction_92: s80S_tRNA_12() + eEF3_GTP() -> s80S_tRNA_eEF3_GTP_12() parameter_8 #Modifiers(species_114, species_44)
	reaction_93: s80S_tRNA_eEF3_GTP_12() -> s80S_12() + eEF3_GDP() + tRNA() parameter_9 #Modifiers(species_115)
	reaction_94: aa_tRNA_eEF1A_GTP() + s80S_13() <-> s80S_aa_tRNA_eEF1A_GTP_13() parameter_2,parameter_3 #Modifiers(species_40, species_116, species_117)
	reaction_95: s80S_aa_tRNA_eEF1A_GTP_13() -> s80S_aa_tRNA_13() + eEF1A_GDP() parameter_4 #Modifiers(species_117)
	reaction_96: eEF2_GTP() + s80S_aa_tRNA_13() <-> s80S_aa_tRNA_eEF2_GTP_13() parameter_5,parameter_6 #Modifiers(species_42, species_118, species_119)
	reaction_97: s80S_aa_tRNA_eEF2_GTP_13() -> s80S_tRNA_14() + eEF2_GDP() parameter_7 #Modifiers(species_119)
	reaction_98: s80S_tRNA_13() + eEF3_GTP() -> s80S_tRNA_eEF3_GTP_13() parameter_8 #Modifiers(species_120, species_44)
	reaction_99: s80S_tRNA_eEF3_GTP_13() -> s80S_13() + eEF3_GDP() + tRNA() parameter_9 #Modifiers(species_121)
	reaction_100: aa_tRNA_eEF1A_GTP() + s80S_14() <-> s80S_aa_tRNA_eEF1A_GTP_14() parameter_2,parameter_3 #Modifiers(species_40, species_122, species_123)
	reaction_101: s80S_aa_tRNA_eEF1A_GTP_14() -> s80S_aa_tRNA_14() + eEF1A_GDP() parameter_4 #Modifiers(species_123)
	reaction_102: eEF2_GTP() + s80S_aa_tRNA_14() <-> s80S_aa_tRNA_eEF2_GTP_14() parameter_5,parameter_6 #Modifiers(species_42, species_124, species_125)
	reaction_103: s80S_aa_tRNA_eEF2_GTP_14() -> s80S_tRNA_15() + eEF2_GDP() parameter_7 #Modifiers(species_125)
	reaction_104: s80S_tRNA_14() + eEF3_GTP() -> s80S_tRNA_eEF3_GTP_14() parameter_8 #Modifiers(species_126, species_44)
	reaction_105: s80S_tRNA_eEF3_GTP_14() -> s80S_14() + eEF3_GDP() + tRNA() parameter_9 #Modifiers(species_127)
	reaction_106: aa_tRNA_eEF1A_GTP() + s80S_15() <-> s80S_aa_tRNA_eEF1A_GTP_15() parameter_2,parameter_3 #Modifiers(species_40, species_128, species_129)
	reaction_107: s80S_aa_tRNA_eEF1A_GTP_15() -> s80S_aa_tRNA_15() + eEF1A_GDP() parameter_4 #Modifiers(species_129)
	reaction_108: eEF2_GTP() + s80S_aa_tRNA_15() <-> s80S_aa_tRNA_eEF2_GTP_15() parameter_5,parameter_6 #Modifiers(species_42, species_130, species_131)
	reaction_109: s80S_aa_tRNA_eEF2_GTP_15() -> s80S_tRNA_16() + eEF2_GDP() parameter_7 #Modifiers(species_131)
	reaction_110: s80S_tRNA_15() + eEF3_GTP() -> s80S_tRNA_eEF3_GTP_15() parameter_8 #Modifiers(species_132, species_44)
	reaction_111: s80S_tRNA_eEF3_GTP_15() -> s80S_15() + eEF3_GDP() + tRNA() parameter_9 #Modifiers(species_133)
	reaction_112: aa_tRNA_eEF1A_GTP() + s80S_16() <-> s80S_aa_tRNA_eEF1A_GTP_16() parameter_2,parameter_3 #Modifiers(species_40, species_134, species_135)
	reaction_113: s80S_aa_tRNA_eEF1A_GTP_16() -> s80S_aa_tRNA_16() + eEF1A_GDP() parameter_4 #Modifiers(species_135)
	reaction_114: eEF2_GTP() + s80S_aa_tRNA_16() <-> s80S_aa_tRNA_eEF2_GTP_16() parameter_5,parameter_6 #Modifiers(species_42, species_136, species_137)
	reaction_115: s80S_aa_tRNA_eEF2_GTP_16() -> s80S_tRNA_17() + eEF2_GDP() parameter_7 #Modifiers(species_137)
	reaction_116: s80S_tRNA_16() + eEF3_GTP() -> s80S_tRNA_eEF3_GTP_16() parameter_8 #Modifiers(species_138, species_44)
	reaction_117: s80S_tRNA_eEF3_GTP_16() -> s80S_16() + eEF3_GDP() + tRNA() parameter_9 #Modifiers(species_139)
	reaction_118: aa_tRNA_eEF1A_GTP() + s80S_17() <-> s80S_aa_tRNA_eEF1A_GTP_17() parameter_2,parameter_3 #Modifiers(species_40, species_140, species_141)
	reaction_119: s80S_aa_tRNA_eEF1A_GTP_17() -> s80S_aa_tRNA_17() + eEF1A_GDP() parameter_4 #Modifiers(species_141)
	reaction_120: eEF2_GTP() + s80S_aa_tRNA_17() <-> s80S_aa_tRNA_eEF2_GTP_17() parameter_5,parameter_6 #Modifiers(species_42, species_142, species_143)
	reaction_121: s80S_aa_tRNA_eEF2_GTP_17() -> s80S_tRNA_18() + eEF2_GDP() parameter_7 #Modifiers(species_143)
	reaction_122: s80S_tRNA_17() + eEF3_GTP() -> s80S_tRNA_eEF3_GTP_17() parameter_8 #Modifiers(species_144, species_44)
	reaction_123: s80S_tRNA_eEF3_GTP_17() -> s80S_17() + eEF3_GDP() + tRNA() parameter_9 #Modifiers(species_145)
	reaction_124: aa_tRNA_eEF1A_GTP() + s80S_18() <-> s80S_aa_tRNA_eEF1A_GTP_18() parameter_2,parameter_3 #Modifiers(species_40, species_146, species_147)
	reaction_125: s80S_aa_tRNA_eEF1A_GTP_18() -> s80S_aa_tRNA_18() + eEF1A_GDP() parameter_4 #Modifiers(species_147)
	reaction_126: eEF2_GTP() + s80S_aa_tRNA_18() <-> s80S_aa_tRNA_eEF2_GTP_18() parameter_5,parameter_6 #Modifiers(species_42, species_148, species_149)
	reaction_127: s80S_aa_tRNA_eEF2_GTP_18() -> s80S_tRNA_19() + eEF2_GDP() parameter_7 #Modifiers(species_149)
	reaction_128: s80S_tRNA_18() + eEF3_GTP() -> s80S_tRNA_eEF3_GTP_18() parameter_8 #Modifiers(species_150, species_44)
	reaction_129: s80S_tRNA_eEF3_GTP_18() -> s80S_18() + eEF3_GDP() + tRNA() parameter_9 #Modifiers(species_151)
	reaction_130: aa_tRNA_eEF1A_GTP() + s80S_19() <-> s80S_aa_tRNA_eEF1A_GTP_19() parameter_2,parameter_3 #Modifiers(species_40, species_152, species_153)
	reaction_131: s80S_aa_tRNA_eEF1A_GTP_19() -> s80S_aa_tRNA_19() + eEF1A_GDP() parameter_4 #Modifiers(species_153)
	reaction_132: eEF2_GTP() + s80S_aa_tRNA_19() <-> s80S_aa_tRNA_eEF2_GTP_19() parameter_5,parameter_6 #Modifiers(species_42, species_154, species_155)
	reaction_133: s80S_aa_tRNA_eEF2_GTP_19() -> s80S_tRNA_20() + eEF2_GDP() parameter_7 #Modifiers(species_155)
	reaction_134: s80S_tRNA_19() + eEF3_GTP() -> s80S_tRNA_eEF3_GTP_19() parameter_8 #Modifiers(species_156, species_44)
	reaction_135: s80S_tRNA_eEF3_GTP_19() -> s80S_19() + eEF3_GDP() + tRNA() parameter_9 #Modifiers(species_157)
	reaction_136: s80S_tRNA_20() + eEF3_GTP() -> s80S_tRNA_eEF3_GTP_20() parameter_8 #Modifiers(species_159, species_44)
	reaction_137: s80S_tRNA_eEF3_GTP_20() -> s80S_20() + eEF3_GDP() + tRNA() parameter_9 #Modifiers(species_160)
	reaction_138: eRF3_GDP() <-> eRF3_GTP() r138_k1,r138_k2 #Modifiers(species_161, species_162)
	reaction_139: eRF1() + eRF3_GTP() <-> eRF1_eRF3_GTP() r139_k1,r139_k2 #Modifiers(species_163, species_162, species_164)
	reaction_140: eRF1_eRF3_GTP() + s80S_20() -> s80S_eRF1_eRF3_GTP() r140_k1 #Modifiers(species_164, species_158)
	reaction_141: s80S_eRF1_eRF3_GTP() -> s40S() + s60S() + eRF1() + eRF3_GDP() r141_k1 #Modifiers(species_165)
end reaction rules
end model
