###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1302180005', 'http://identifiers.org/biomodels.db/BIOMD0000000466']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/23708369']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0006809', 'http://identifiers.org/reactome/REACT_12443.3', 'http://identifiers.org/go/GO:0034405', 'http://identifiers.org/go/GO:0002537']
#@creatorEmail:'juty@ebi.ac.uk'
#@creatorName:'Juty Nick'
#@notes:'This is a plain translation of an SBML model created on 14/08/2021. The original model has 34 molecules and 28 reactions. The translated model has 33 molecules and 34 rules'
###
begin model
begin parameters
	r1_normal 4.000000
	r1_tf 60.000000
	r1_unity 1.000000
	r1_unimol 1.000000
	r1_tiny_num 0.000001
	r2_normal 0.026000
	r2_tf 540.000000
	r2_unity 1.000000
	r2_unimol 1.000000
	r3_k3 0.100000
	r3_kr3 1.000000
	r4_k4 8.330000
	r4_kr4 5.000000
	r5_k5 60.000000
	r5_kr5 546.000000
	r6_k6 2040.000000
	r6_kr6 15700.000000
	r7_V8 154.000000
	r7_Km8 340.000000
	r8_k7 40.800000
	r9_k25 0.001000
	r10_k24t1 0.000120
	r10_k24t2 0.000009
	r11_k9 0.222000
	r11_Km9 0.181000
	r12_V10 0.289000
	r12_Km10 0.057100
	r13_k11 0.035000
	r13_Km11 10.000000
	r14_Km12 8.000000
	r14_V12 0.125000
	r15_k13 0.005000
	r15_Km13 15.000000
	r16_Km14 15.000000
	r16_V14 0.375000
	r17_k17 0.002000
	r17_Km17 30.000000
	r18_Km18 15.000000
	r18_V18 0.050000
	r19_k26 0.000028
	r20_V27 0.028240
	r20_Km27 16.000000
	r21_unitime 1.000000
	r22_V16 0.375000
	r22_Km16 15.000000
	r23_k15 0.005000
	r23_Km15 15.000000
	r24_V20 0.050000
	r24_Km20 15.000000
	r25_k19 0.002000
	r25_Km19 30.000000
	r26_Km21 25.000000
	r26_k21 0.000040
	r27_Km22 5.000000
	r27_V22 0.002000
	r28_tau 0.550000
	r28_tc 3600.000000
	r28_uc 3600.000000
	r28_delay 5.000000
	r28_unity 20.000000
end parameters
begin compartments
	#volume units: volume
	default 3 1.0
	c1 3 1.0 #Cell
	c3 3 1.0 #nucleus
end compartments
begin molecule types
	Ras_GDP()
	pp_JNK()
	p_FAK_p_Shc_Grb2_Sos()
	p_JNKK()
	eNOS()
	aAP_1()
	JNKK()
	p_Src()
	Time()
	p_FAK_p_Shc()
	MEKK1()
	JNK()
	KLF2_s105()
	Src()
	Shc()
	FAK()
	p_FAK_Shc()
	Ras_GTP()
	p_Shc_Grb2_Sos()
	p_MEKK1()
	eNOS_s115()
	eNOS_s108()
	p_Shc()
	pre_time()
	AP_1()
	s35()
	KLF2()
	Grb2_Sos()
	s37()
	pp_JNKK()
	p_FAK()
	p_JNK()
	eNOS_Cav_1()
end molecule types
begin seed species
	@c1:s37() 10000.0 #s37 #s37
	@c3:AP_1() 50.0 #AP_1 #s42
	@c1:pp_JNKK() 0.006 #pp_JNKK #s43
	@c1:KLF2() 10.0 #KLF2 #s49
	@c1:eNOS_Cav_1() 34.98 #eNOS_Cav_1 #s51
	@c1:Shc() 819.25 #Shc #s91
	@c1:p_Src() 18.0 #p_Src #s92
	@c1:p_FAK() 0.605 #p_FAK #s93
	@c1:Src() 72.0 #Src #s94
	@c1:FAK() 57.0 #FAK #s95
	@c1:JNKK() 299.706 #JNKK #s96
	@c1:MEKK1() 98.514 #MEKK1 #s97
	@c1:p_Shc() 157.162 #p_Shc #s98
	@c1:JNK() 299.997 #JNK #s99
	@c1:p_JNKK() 0.288 #p_JNKK #s100
	@c1:p_MEKK1() 1.486 #p_MEKK1 #s101
	@c1:Ras_GTP() 0.616 #Ras_GTP #s102
	@c1:Ras_GDP() 119.384 #Ras_GDP #s103
	@c1:p_JNK() 0.003 #p_JNK #s104
	@c1:eNOS() 3.214 #eNOS #s106
	@c1:p_FAK_Shc() 0.857 #p_FAK_Shc #s110
	@c1:Grb2_Sos() 3.23 #Grb2_Sos #s111
	@c1:p_FAK_p_Shc() 15.962 #p_FAK_p_Shc #s112
	@c1:p_FAK_p_Shc_Grb2_Sos() 5.577 #p_FAK_p_Shc_Grb2_Sos #s113
	@c1:p_Shc_Grb2_Sos() 1.193 #p_Shc_Grb2_Sos #s114
	@c3:eNOS_s115() 0.09 #eNOS_s115 #s115
end seed species
begin observables
	Species s35_c1 @c1:s35() #s35
	Species s37_c1 @c1:s37() #s37
	Species pre_time_c1 @c1:pre_time() #pre_time
	Species Time_c1 @c1:Time() #Time
	Species AP_1_c3 @c3:AP_1() #AP-1
	Species pp_JNKK_c1 @c1:pp_JNKK() #pp-JNKK
	Species pp_JNK_c1 @c1:pp_JNK() #pp-JNK
	Species KLF2_c1 @c1:KLF2() #KLF2
	Species eNOS_Cav_1_c1 @c1:eNOS_Cav_1() #eNOS-Cav-1
	Species Shc_c1 @c1:Shc() #Shc
	Species p_Src_c1 @c1:p_Src() #p-Src
	Species p_FAK_c1 @c1:p_FAK() #p-FAK
	Species Src_c1 @c1:Src() #Src
	Species FAK_c1 @c1:FAK() #FAK
	Species JNKK_c1 @c1:JNKK() #JNKK
	Species MEKK1_c1 @c1:MEKK1() #MEKK1
	Species p_Shc_c1 @c1:p_Shc() #p-Shc
	Species JNK_c1 @c1:JNK() #JNK
	Species p_JNKK_c1 @c1:p_JNKK() #p-JNKK
	Species p_MEKK1_c1 @c1:p_MEKK1() #p-MEKK1
	Species Ras_GTP_c1 @c1:Ras_GTP() #Ras:GTP
	Species Ras_GDP_c1 @c1:Ras_GDP() #Ras:GDP
	Species p_JNK_c1 @c1:p_JNK() #p-JNK
	Species KLF2_s105_c1 @c1:KLF2_s105() #KLF2
	Species eNOS_c1 @c1:eNOS() #eNOS
	Species aAP_1_c3 @c3:aAP_1() #aAP-1
	Species eNOS_s108_c3 @c3:eNOS_s108() #eNOS
	Species p_FAK_Shc_c1 @c1:p_FAK_Shc() #p-FAK:Shc
	Species Grb2_Sos_c1 @c1:Grb2_Sos() #Grb2:Sos
	Species p_FAK_p_Shc_c1 @c1:p_FAK_p_Shc() #p-FAK:p-Shc
	Species p_FAK_p_Shc_Grb2_Sos_c1 @c1:p_FAK_p_Shc_Grb2_Sos() #p-FAK:p-Shc:Grb2:Sos
	Species p_Shc_Grb2_Sos_c1 @c1:p_Shc_Grb2_Sos() #p-Shc:Grb2:Sos
	Species eNOS_s115_c3 @c3:eNOS_s115() #eNOS
end observables
begin functions
	fRate0() = 4.0*(1.0 - 0.238587157113837*Time_c1^0.35)*(1.0*Time_c1 + 1.0e-6)^(-0.65)*exp(1.0 - 0.238587157113837*Time_c1^0.35)
	fRate1() = 0.026*Time_c1^0.3*(1.0 - 0.000280471096406246*Time_c1^1.3)*exp(1.0 - 0.000280471096406246*Time_c1^1.3)
	fRate3() = 8.33*p_Src_c1
	fRate6() = 154.0/(p_Shc_c1 + 340.0)
	fRate9() = 9.0e-6*KLF2_c1 + 0.00012*aAP_1_c3
	fRate10() = 0.222*p_Shc_Grb2_Sos_c1/(Ras_GDP_c1 + 0.181)
	fRate11() = 0.289/(Ras_GTP_c1 + 0.0571)
	fRate12() = 0.035*Ras_GTP_c1/(MEKK1_c1 + 10.0)
	fRate13() = 0.125/(p_MEKK1_c1 + 8.0)
	fRate14() = 0.005*p_MEKK1_c1/(JNKK_c1 + 15.0)
	fRate15() = 0.375/(p_JNKK_c1 + 15.0)
	fRate16() = 0.002*pp_JNKK_c1/(JNK_c1 + 30.0)
	fRate17() = 0.05/(p_JNK_c1 + 15.0)
	fRate19() = 0.02824*eNOS_c1/(eNOS_c1 + 16.0)
	fRate20() = 1.0
	fRate21() = 0.375/(pp_JNKK_c1 + 15.0)
	fRate22() = 0.005*p_MEKK1_c1/(p_JNKK_c1 + 15.0)
	fRate23() = 0.05/(pp_JNK_c1 + 15.0)
	fRate24() = 0.002*pp_JNKK_c1/(p_JNK_c1 + 30.0)
	fRate25() = 4.0e-5*pp_JNK_c1/(AP_1_c3 + 25.0)
	fRate26() = 0.002/(aAP_1_c3 + 5.0)
	fRate27() = 29.256*exp(2.75 - 0.000152777777777778*Time_c1)/(7200.0*exp(2.75 - 0.000152777777777778*Time_c1) + 3600.0*exp(5.5 - 0.000305555555555556*Time_c1) + 3600.0)
end functions
begin reaction rules
	re102_reactants_0: 0  -> FAK()@c1 -1*(fRate0()) #Modifiers(s39, s119, s39)
	re102_products_0: 0  -> p_FAK()@c1 fRate0() #Modifiers(s39, s119, s39)
	re103_reactants_0: 0  -> Src()@c1 -1*(fRate1()) #Modifiers(s39, s119, s39)
	re103_products_0: 0  -> p_Src()@c1 fRate1() #Modifiers(s39, s119, s39)
	re104: Shc()@c1 + p_FAK()@c1 <-> p_FAK_Shc()@c1 r3_k3,r3_kr3 #Modifiers(s91, s93, s110)
	re105: p_FAK_Shc()@c1 <-> p_FAK_p_Shc()@c1 fRate3(),r4_kr4 #Modifiers(s92, s110, s92, s112)
	re106: p_FAK_p_Shc()@c1 + Grb2_Sos()@c1 <-> p_FAK_p_Shc_Grb2_Sos()@c1 r5_k5,r5_kr5 #Modifiers(s111, s112, s113)
	re107: p_FAK_p_Shc_Grb2_Sos()@c1 <-> p_Shc_Grb2_Sos()@c1 + p_FAK()@c1 r6_k6,r6_kr6 #Modifiers(s113, s93, s114)
	re108: p_Shc()@c1 -> Shc()@c1 fRate6() #Modifiers(s98)
	re109: p_Shc_Grb2_Sos()@c1 -> p_Shc()@c1 + Grb2_Sos()@c1 r8_k7 #Modifiers(s114)
	re110: eNOS_s115()@c3 -> eNOS()@c1 r9_k25 #Modifiers(s115)
	re111_reactants_0: 0  -> eNOS_s108()@c3 -1*(fRate9()) #Modifiers(s107, s49, s107, s49)
	re111_products_0: 0  -> eNOS_s115()@c3 fRate9() #Modifiers(s107, s49, s107, s49)
	re112: Ras_GDP()@c1 -> Ras_GTP()@c1 fRate10() #Modifiers(s114, s114, s103)
	re113: Ras_GTP()@c1 -> Ras_GDP()@c1 fRate11() #Modifiers(s102)
	re114: MEKK1()@c1 -> p_MEKK1()@c1 fRate12() #Modifiers(s102, s102, s97)
	re115: p_MEKK1()@c1 -> MEKK1()@c1 fRate13() #Modifiers(s101)
	re116: JNKK()@c1 -> p_JNKK()@c1 fRate14() #Modifiers(s101, s101, s96)
	re117: p_JNKK()@c1 -> JNKK()@c1 fRate15() #Modifiers(s100)
	re118: JNK()@c1 -> p_JNK()@c1 fRate16() #Modifiers(s43, s99, s43)
	re119: p_JNK()@c1 -> JNK()@c1 fRate17() #Modifiers(s104)
	re120: eNOS()@c1 -> s35()@c1 r19_k26 #Modifiers(s106)
	re121_reactants_0: 0  -> s37()@c1 -1*(fRate19()) #Modifiers(s106, s106)
	re121_products_0: 0  -> eNOS_Cav_1()@c1 fRate19() #Modifiers(s106, s106)
	re122_reactants_0: 0  -> pre_time()@c1 -1*(fRate20())
	re122_products_0: 0  -> Time()@c1 fRate20()
	re123: pp_JNKK()@c1 -> p_JNKK()@c1 fRate21() #Modifiers(s43)
	re124: p_JNKK()@c1 -> pp_JNKK()@c1 fRate22() #Modifiers(s101, s100, s101)
	re125: pp_JNK()@c1 -> p_JNK()@c1 fRate23() #Modifiers(s44)
	re126: p_JNK()@c1 -> pp_JNK()@c1 fRate24() #Modifiers(s43, s104, s43)
	re127: AP_1()@c3 -> aAP_1()@c3 fRate25() #Modifiers(s44, s44, s42)
	re128: aAP_1()@c3 -> AP_1()@c3 fRate26() #Modifiers(s107)
	re129_reactants_0: 0  -> KLF2_s105()@c1 -1*(fRate27()) #Modifiers(s39, s39)
	re129_products_0: 0  -> KLF2()@c1 fRate27() #Modifiers(s39, s39)
end reaction rules
end model
