###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1406130001', 'http://identifiers.org/biomodels.db/BIOMD0000000541']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/25131207']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/biomodels.db/MODEL1204060000']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/131567']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0006110', 'http://identifiers.org/go/GO:0032868']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is a plain translation of an SBML model created on 13/08/2021. The original model has 37 molecules and 30 reactions. The translated model has 35 molecules and 37 rules'
###
begin model
begin parameters
	K_FBPase_cit 0.0211646 #units:dimensionless
	K_FBPase_f16bp 0.104089638 #units:dimensionless
	K_FBPase_f26bp 17.51744342 #units:dimensionless
	K_PFKL_PHOS_S775 6.283705757 #units:dimensionless
	K_PFKL_akg 24661.01154 #units:dimensionless
	K_PFKL_cit 41.30426029 #units:dimensionless
	K_PFKL_f26bp 1.282443082 #units:dimensionless
	K_PFKL_f6p 0.014114844 #units:dimensionless
	K_PFKL_icit 1784.508205 #units:dimensionless
	K_PFKL_mal 9.544729149 #units:dimensionless
	K_PFKL_pep 0.633518366 #units:dimensionless
	Vf_FBPase 9.932861302 #units:dimensionless
	Vf_PFKL 695063.7194 #units:dimensionless
	k_ALDO 0.008187906 #units:dimensionless
	k_mal 1.005530417 #units:substance
	k_akg -3.544494721 #units:substance
	k_pep 43.99195576 #units:substance
	k_icit -0.038210156 #units:substance
	k_f26bp -0.083430336 #units:substance
	k_cit -0.351935646 #units:substance
	k_f6p -0.930115636 #units:dimensionless
	insulin 1.0 #units:dimensionless
	FBPase 1.0
	ALDO 1.0
	r11_k1 0.047799
	r12_k1 7.781608
	r12_k2 1.611475
	r13_k1 9.933112
	r14_k1 0.363030
	r14_k2 0.408128
	r15_k1 0.000039
	r16_k1 0.284426
	r17_k1 0.000010
	r18_k1 0.094896
	r19_k1 0.009196
	r20_k1 7.706185
	r21_k1 0.000010
	r22_k1 0.007927
	r23_k1 0.419682
	r24_k1 0.124330
	r25_k1 0.007525
	r26_k1 1.954976
	r27_k1 0.001053
	r28_k1 0.001458
	r29_k1 26.831671
	r30_k1 0.016653
end parameters
begin molecule types
	pmTOR()
	F6P()
	sa3_degraded()
	IR_complex()
	pAKT()
	pro_IR_complex()
	s2_oxoglutarate()
	Malate()
	sa7_degraded()
	sa5_degraded()
	p1IR_complex()
	pPFKL()
	sa26_degraded()
	F2_6BP()
	sa4_degraded()
	Isocitrate()
	Citrate()
	X()
	sa6_degraded()
	sa10_degraded()
	S6K()
	sa9_degraded()
	p1p2IRcomplex()
	sa27_degraded()
	PEP()
	sa28_degraded()
	pX()
	pS6K()
	F6P_proxy()
	mTOR()
	AKT()
	PFKL()
	F1_6BP()
	sa8_degraded()
	p2IR_complex()
end molecule types
begin seed species
	$PFKL() 1.235570941 #PFKL #s1
	F6P() 14.0774258421 #F6P #s3
	F1_6BP() 104.07239819 #F1_6BP #s4
	PEP() 108.094519859 #PEP #s5
	Isocitrate() 1.79487179487 #Isocitrate #s6
	s2_oxoglutarate() 25.1885369533 #s2_oxoglutarate #s7
	Malate() 68.8788335846 #Malate #s8
	F2_6BP() 1.0 #F2_6BP #s9
	Citrate() 17.7476118652 #Citrate #s10
	pPFKL() 0.759332005 #pPFKL #s13
	IR_complex() 37.81914621 #IR_complex #s23
	$pro_IR_complex() 46.2222520609226 #pro_IR_complex #s24
	p1IR_complex() 2.507671281 #p1IR_complex #s25
	p2IR_complex() 852.608418 #p2IR_complex #s26
	p1p2IRcomplex() 3.930695895 #p1p2IRcomplex #s27
	$AKT() 4.33812187331668 #AKT #s28
	pAKT() 0.012942682 #pAKT #s29
	$mTOR() 0.0959163701057347 #mTOR #s30
	pmTOR() 0.004015031 #pmTOR #s31
	$S6K() 2.7769943784158 #S6K #s32
	pS6K() 0.000988831 #pS6K #s33
	$X() 14.9913345914433 #X #s34
	pX() 0.043352951 #pX #s35
	F6P_proxy() 14.0774258421 #F6P_proxy #s22
end seed species
begin observables
	Species PFKL PFKL() #PFKL
	Species F6P F6P() #F6P
	Species F1_6BP F1_6BP() #F1,6BP
	Species PEP PEP() #PEP
	Species Isocitrate Isocitrate() #Isocitrate
	Species s2_oxoglutarate s2_oxoglutarate() #2-oxoglutarate
	Species Malate Malate() #Malate
	Species F2_6BP F2_6BP() #F2,6BP
	Species Citrate Citrate() #Citrate
	Species sa4_degraded sa4_degraded() #sa4_degraded
	Species pPFKL pPFKL() #pPFKL
	Species sa8_degraded sa8_degraded() #sa8_degraded
	Species sa7_degraded sa7_degraded() #sa7_degraded
	Species sa5_degraded sa5_degraded() #sa5_degraded
	Species sa6_degraded sa6_degraded() #sa6_degraded
	Species sa9_degraded sa9_degraded() #sa9_degraded
	Species sa3_degraded sa3_degraded() #sa3_degraded
	Species sa10_degraded sa10_degraded() #sa10_degraded
	Species IR_complex IR_complex() #IR_complex
	Species pro_IR_complex pro_IR_complex() #pro_IR_complex
	Species p1IR_complex p1IR_complex() #p1IR_complex
	Species p2IR_complex p2IR_complex() #p2IR_complex
	Species p1p2IRcomplex p1p2IRcomplex() #p1p2IRcomplex
	Species AKT AKT() #AKT
	Species pAKT pAKT() #pAKT
	Species mTOR mTOR() #mTOR
	Species pmTOR pmTOR() #pmTOR
	Species S6K S6K() #S6K
	Species pS6K pS6K() #pS6K
	Species X X() #X
	Species pX pX() #pX
	Species sa28_degraded sa28_degraded() #sa28_degraded
	Species sa27_degraded sa27_degraded() #sa27_degraded
	Species sa26_degraded sa26_degraded() #sa26_degraded
	Species F6P_proxy F6P_proxy() #F6P_proxy
end observables
begin functions
	F6P_proxy_ar() = F6P
	fRate0() = F2_6BP*K_PFKL_akg*K_PFKL_cit*K_PFKL_icit*K_PFKL_mal*K_PFKL_pep*Vf_PFKL*pPFKL/(Citrate*F2_6BP*F6P_proxy_ar*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_mal*K_PFKL_pep + Citrate*F2_6BP*F6P_proxy_ar*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_mal*PEP + Citrate*F2_6BP*F6P_proxy_ar*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_pep*Malate + Citrate*F2_6BP*F6P_proxy_ar*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_akg*Malate*PEP + Citrate*F2_6BP*F6P_proxy_ar*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_mal*K_PFKL_pep*s2_oxoglutarate + Citrate*F2_6BP*F6P_proxy_ar*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_mal*PEP*s2_oxoglutarate + Citrate*F2_6BP*F6P_proxy_ar*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_pep*Malate*s2_oxoglutarate + Citrate*F2_6BP*F6P_proxy_ar*Isocitrate*K_PFKL_PHOS_S775*Malate*PEP*s2_oxoglutarate + Citrate*F2_6BP*F6P_proxy_ar*Isocitrate*K_PFKL_akg*K_PFKL_mal*K_PFKL_pep*pPFKL + Citrate*F2_6BP*F6P_proxy_ar*Isocitrate*K_PFKL_akg*K_PFKL_mal*PEP*pPFKL + Citrate*F2_6BP*F6P_proxy_ar*Isocitrate*K_PFKL_akg*K_PFKL_pep*Malate*pPFKL + Citrate*F2_6BP*F6P_proxy_ar*Isocitrate*K_PFKL_akg*Malate*PEP*pPFKL + Citrate*F2_6BP*F6P_proxy_ar*Isocitrate*K_PFKL_mal*K_PFKL_pep*pPFKL*s2_oxoglutarate + Citrate*F2_6BP*F6P_proxy_ar*Isocitrate*K_PFKL_mal*PEP*pPFKL*s2_oxoglutarate + Citrate*F2_6BP*F6P_proxy_ar*Isocitrate*K_PFKL_pep*Malate*pPFKL*s2_oxoglutarate + Citrate*F2_6BP*F6P_proxy_ar*Isocitrate*Malate*PEP*pPFKL*s2_oxoglutarate + Citrate*F2_6BP*F6P_proxy_ar*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_icit*K_PFKL_mal*K_PFKL_pep + Citrate*F2_6BP*F6P_proxy_ar*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_icit*K_PFKL_mal*PEP + Citrate*F2_6BP*F6P_proxy_ar*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_icit*K_PFKL_pep*Malate + Citrate*F2_6BP*F6P_proxy_ar*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_icit*Malate*PEP + Citrate*F2_6BP*F6P_proxy_ar*K_PFKL_PHOS_S775*K_PFKL_icit*K_PFKL_mal*K_PFKL_pep*s2_oxoglutarate + Citrate*F2_6BP*F6P_proxy_ar*K_PFKL_PHOS_S775*K_PFKL_icit*K_PFKL_mal*PEP*s2_oxoglutarate + Citrate*F2_6BP*F6P_proxy_ar*K_PFKL_PHOS_S775*K_PFKL_icit*K_PFKL_pep*Malate*s2_oxoglutarate + Citrate*F2_6BP*F6P_proxy_ar*K_PFKL_PHOS_S775*K_PFKL_icit*Malate*PEP*s2_oxoglutarate + Citrate*F2_6BP*F6P_proxy_ar*K_PFKL_akg*K_PFKL_icit*K_PFKL_mal*K_PFKL_pep*pPFKL + Citrate*F2_6BP*F6P_proxy_ar*K_PFKL_akg*K_PFKL_icit*K_PFKL_mal*PEP*pPFKL + Citrate*F2_6BP*F6P_proxy_ar*K_PFKL_akg*K_PFKL_icit*K_PFKL_pep*Malate*pPFKL + Citrate*F2_6BP*F6P_proxy_ar*K_PFKL_akg*K_PFKL_icit*Malate*PEP*pPFKL + Citrate*F2_6BP*F6P_proxy_ar*K_PFKL_icit*K_PFKL_mal*K_PFKL_pep*pPFKL*s2_oxoglutarate + Citrate*F2_6BP*F6P_proxy_ar*K_PFKL_icit*K_PFKL_mal*PEP*pPFKL*s2_oxoglutarate + Citrate*F2_6BP*F6P_proxy_ar*K_PFKL_icit*K_PFKL_pep*Malate*pPFKL*s2_oxoglutarate + Citrate*F2_6BP*F6P_proxy_ar*K_PFKL_icit*Malate*PEP*pPFKL*s2_oxoglutarate + Citrate*F2_6BP*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_f6p*K_PFKL_mal*K_PFKL_pep + Citrate*F2_6BP*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_f6p*K_PFKL_mal*PEP + Citrate*F2_6BP*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_f6p*K_PFKL_pep*Malate + Citrate*F2_6BP*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_f6p*Malate*PEP + Citrate*F2_6BP*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_f6p*K_PFKL_mal*K_PFKL_pep*s2_oxoglutarate + Citrate*F2_6BP*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_f6p*K_PFKL_mal*PEP*s2_oxoglutarate + Citrate*F2_6BP*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_f6p*K_PFKL_pep*Malate*s2_oxoglutarate + Citrate*F2_6BP*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_f6p*Malate*PEP*s2_oxoglutarate + Citrate*F2_6BP*Isocitrate*K_PFKL_akg*K_PFKL_f6p*K_PFKL_mal*K_PFKL_pep*pPFKL + Citrate*F2_6BP*Isocitrate*K_PFKL_akg*K_PFKL_f6p*K_PFKL_mal*PEP*pPFKL + Citrate*F2_6BP*Isocitrate*K_PFKL_akg*K_PFKL_f6p*K_PFKL_pep*Malate*pPFKL + Citrate*F2_6BP*Isocitrate*K_PFKL_akg*K_PFKL_f6p*Malate*PEP*pPFKL + Citrate*F2_6BP*Isocitrate*K_PFKL_f6p*K_PFKL_mal*K_PFKL_pep*pPFKL*s2_oxoglutarate + Citrate*F2_6BP*Isocitrate*K_PFKL_f6p*K_PFKL_mal*PEP*pPFKL*s2_oxoglutarate + Citrate*F2_6BP*Isocitrate*K_PFKL_f6p*K_PFKL_pep*Malate*pPFKL*s2_oxoglutarate + Citrate*F2_6BP*Isocitrate*K_PFKL_f6p*Malate*PEP*pPFKL*s2_oxoglutarate + Citrate*F2_6BP*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_f6p*K_PFKL_icit*K_PFKL_mal*K_PFKL_pep + Citrate*F2_6BP*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_f6p*K_PFKL_icit*K_PFKL_mal*PEP + Citrate*F2_6BP*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_f6p*K_PFKL_icit*K_PFKL_pep*Malate + Citrate*F2_6BP*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_f6p*K_PFKL_icit*Malate*PEP + Citrate*F2_6BP*K_PFKL_PHOS_S775*K_PFKL_f6p*K_PFKL_icit*K_PFKL_mal*K_PFKL_pep*s2_oxoglutarate + Citrate*F2_6BP*K_PFKL_PHOS_S775*K_PFKL_f6p*K_PFKL_icit*K_PFKL_mal*PEP*s2_oxoglutarate + Citrate*F2_6BP*K_PFKL_PHOS_S775*K_PFKL_f6p*K_PFKL_icit*K_PFKL_pep*Malate*s2_oxoglutarate + Citrate*F2_6BP*K_PFKL_PHOS_S775*K_PFKL_f6p*K_PFKL_icit*Malate*PEP*s2_oxoglutarate + Citrate*F2_6BP*K_PFKL_akg*K_PFKL_f6p*K_PFKL_icit*K_PFKL_mal*K_PFKL_pep*pPFKL + Citrate*F2_6BP*K_PFKL_akg*K_PFKL_f6p*K_PFKL_icit*K_PFKL_mal*PEP*pPFKL + Citrate*F2_6BP*K_PFKL_akg*K_PFKL_f6p*K_PFKL_icit*K_PFKL_pep*Malate*pPFKL + Citrate*F2_6BP*K_PFKL_akg*K_PFKL_f6p*K_PFKL_icit*Malate*PEP*pPFKL + Citrate*F2_6BP*K_PFKL_f6p*K_PFKL_icit*K_PFKL_mal*K_PFKL_pep*pPFKL*s2_oxoglutarate + Citrate*F2_6BP*K_PFKL_f6p*K_PFKL_icit*K_PFKL_mal*PEP*pPFKL*s2_oxoglutarate + Citrate*F2_6BP*K_PFKL_f6p*K_PFKL_icit*K_PFKL_pep*Malate*pPFKL*s2_oxoglutarate + Citrate*F2_6BP*K_PFKL_f6p*K_PFKL_icit*Malate*PEP*pPFKL*s2_oxoglutarate + Citrate*F6P_proxy_ar*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_f26bp*K_PFKL_mal*K_PFKL_pep + Citrate*F6P_proxy_ar*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_f26bp*K_PFKL_mal*PEP + Citrate*F6P_proxy_ar*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_f26bp*K_PFKL_pep*Malate + Citrate*F6P_proxy_ar*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_f26bp*Malate*PEP + Citrate*F6P_proxy_ar*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_f26bp*K_PFKL_mal*K_PFKL_pep*s2_oxoglutarate + Citrate*F6P_proxy_ar*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_f26bp*K_PFKL_mal*PEP*s2_oxoglutarate + Citrate*F6P_proxy_ar*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_f26bp*K_PFKL_pep*Malate*s2_oxoglutarate + Citrate*F6P_proxy_ar*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_f26bp*Malate*PEP*s2_oxoglutarate + Citrate*F6P_proxy_ar*Isocitrate*K_PFKL_akg*K_PFKL_f26bp*K_PFKL_mal*K_PFKL_pep*pPFKL + Citrate*F6P_proxy_ar*Isocitrate*K_PFKL_akg*K_PFKL_f26bp*K_PFKL_mal*PEP*pPFKL + Citrate*F6P_proxy_ar*Isocitrate*K_PFKL_akg*K_PFKL_f26bp*K_PFKL_pep*Malate*pPFKL + Citrate*F6P_proxy_ar*Isocitrate*K_PFKL_akg*K_PFKL_f26bp*Malate*PEP*pPFKL + Citrate*F6P_proxy_ar*Isocitrate*K_PFKL_f26bp*K_PFKL_mal*K_PFKL_pep*pPFKL*s2_oxoglutarate + Citrate*F6P_proxy_ar*Isocitrate*K_PFKL_f26bp*K_PFKL_mal*PEP*pPFKL*s2_oxoglutarate + Citrate*F6P_proxy_ar*Isocitrate*K_PFKL_f26bp*K_PFKL_pep*Malate*pPFKL*s2_oxoglutarate + Citrate*F6P_proxy_ar*Isocitrate*K_PFKL_f26bp*Malate*PEP*pPFKL*s2_oxoglutarate + Citrate*F6P_proxy_ar*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_f26bp*K_PFKL_icit*K_PFKL_mal*K_PFKL_pep + Citrate*F6P_proxy_ar*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_f26bp*K_PFKL_icit*K_PFKL_mal*PEP + Citrate*F6P_proxy_ar*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_f26bp*K_PFKL_icit*K_PFKL_pep*Malate + Citrate*F6P_proxy_ar*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_f26bp*K_PFKL_icit*Malate*PEP + Citrate*F6P_proxy_ar*K_PFKL_PHOS_S775*K_PFKL_f26bp*K_PFKL_icit*K_PFKL_mal*K_PFKL_pep*s2_oxoglutarate + Citrate*F6P_proxy_ar*K_PFKL_PHOS_S775*K_PFKL_f26bp*K_PFKL_icit*K_PFKL_mal*PEP*s2_oxoglutarate + Citrate*F6P_proxy_ar*K_PFKL_PHOS_S775*K_PFKL_f26bp*K_PFKL_icit*K_PFKL_pep*Malate*s2_oxoglutarate + Citrate*F6P_proxy_ar*K_PFKL_PHOS_S775*K_PFKL_f26bp*K_PFKL_icit*Malate*PEP*s2_oxoglutarate + Citrate*F6P_proxy_ar*K_PFKL_akg*K_PFKL_f26bp*K_PFKL_icit*K_PFKL_mal*K_PFKL_pep*pPFKL + Citrate*F6P_proxy_ar*K_PFKL_akg*K_PFKL_f26bp*K_PFKL_icit*K_PFKL_mal*PEP*pPFKL + Citrate*F6P_proxy_ar*K_PFKL_akg*K_PFKL_f26bp*K_PFKL_icit*K_PFKL_pep*Malate*pPFKL + Citrate*F6P_proxy_ar*K_PFKL_akg*K_PFKL_f26bp*K_PFKL_icit*Malate*PEP*pPFKL + Citrate*F6P_proxy_ar*K_PFKL_f26bp*K_PFKL_icit*K_PFKL_mal*K_PFKL_pep*pPFKL*s2_oxoglutarate + Citrate*F6P_proxy_ar*K_PFKL_f26bp*K_PFKL_icit*K_PFKL_mal*PEP*pPFKL*s2_oxoglutarate + Citrate*F6P_proxy_ar*K_PFKL_f26bp*K_PFKL_icit*K_PFKL_pep*Malate*pPFKL*s2_oxoglutarate + Citrate*F6P_proxy_ar*K_PFKL_f26bp*K_PFKL_icit*Malate*PEP*pPFKL*s2_oxoglutarate + Citrate*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_mal*K_PFKL_pep + Citrate*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_mal*PEP + Citrate*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_pep*Malate + Citrate*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_f26bp*K_PFKL_f6p*Malate*PEP + Citrate*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_mal*K_PFKL_pep*s2_oxoglutarate + Citrate*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_mal*PEP*s2_oxoglutarate + Citrate*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_pep*Malate*s2_oxoglutarate + Citrate*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_f26bp*K_PFKL_f6p*Malate*PEP*s2_oxoglutarate + Citrate*Isocitrate*K_PFKL_akg*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_mal*K_PFKL_pep*pPFKL + Citrate*Isocitrate*K_PFKL_akg*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_mal*PEP*pPFKL + Citrate*Isocitrate*K_PFKL_akg*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_pep*Malate*pPFKL + Citrate*Isocitrate*K_PFKL_akg*K_PFKL_f26bp*K_PFKL_f6p*Malate*PEP*pPFKL + Citrate*Isocitrate*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_mal*K_PFKL_pep*pPFKL*s2_oxoglutarate + Citrate*Isocitrate*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_mal*PEP*pPFKL*s2_oxoglutarate + Citrate*Isocitrate*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_pep*Malate*pPFKL*s2_oxoglutarate + Citrate*Isocitrate*K_PFKL_f26bp*K_PFKL_f6p*Malate*PEP*pPFKL*s2_oxoglutarate + Citrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_icit*K_PFKL_mal*K_PFKL_pep + Citrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_icit*K_PFKL_mal*PEP + Citrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_icit*K_PFKL_pep*Malate + Citrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_icit*Malate*PEP + Citrate*K_PFKL_PHOS_S775*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_icit*K_PFKL_mal*K_PFKL_pep*s2_oxoglutarate + Citrate*K_PFKL_PHOS_S775*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_icit*K_PFKL_mal*PEP*s2_oxoglutarate + Citrate*K_PFKL_PHOS_S775*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_icit*K_PFKL_pep*Malate*s2_oxoglutarate + Citrate*K_PFKL_PHOS_S775*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_icit*Malate*PEP*s2_oxoglutarate + Citrate*K_PFKL_akg*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_icit*K_PFKL_mal*K_PFKL_pep*pPFKL + Citrate*K_PFKL_akg*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_icit*K_PFKL_mal*PEP*pPFKL + Citrate*K_PFKL_akg*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_icit*K_PFKL_pep*Malate*pPFKL + Citrate*K_PFKL_akg*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_icit*Malate*PEP*pPFKL + Citrate*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_icit*K_PFKL_mal*K_PFKL_pep*pPFKL*s2_oxoglutarate + Citrate*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_icit*K_PFKL_mal*PEP*pPFKL*s2_oxoglutarate + Citrate*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_icit*K_PFKL_pep*Malate*pPFKL*s2_oxoglutarate + Citrate*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_icit*Malate*PEP*pPFKL*s2_oxoglutarate + F2_6BP*F6P_proxy_ar*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_cit*K_PFKL_mal*K_PFKL_pep + F2_6BP*F6P_proxy_ar*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_cit*K_PFKL_mal*PEP + F2_6BP*F6P_proxy_ar*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_cit*K_PFKL_pep*Malate + F2_6BP*F6P_proxy_ar*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_cit*Malate*PEP + F2_6BP*F6P_proxy_ar*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_cit*K_PFKL_mal*K_PFKL_pep*s2_oxoglutarate + F2_6BP*F6P_proxy_ar*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_cit*K_PFKL_mal*PEP*s2_oxoglutarate + F2_6BP*F6P_proxy_ar*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_cit*K_PFKL_pep*Malate*s2_oxoglutarate + F2_6BP*F6P_proxy_ar*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_cit*Malate*PEP*s2_oxoglutarate + F2_6BP*F6P_proxy_ar*Isocitrate*K_PFKL_akg*K_PFKL_cit*K_PFKL_mal*K_PFKL_pep*pPFKL + F2_6BP*F6P_proxy_ar*Isocitrate*K_PFKL_akg*K_PFKL_cit*K_PFKL_mal*PEP*pPFKL + F2_6BP*F6P_proxy_ar*Isocitrate*K_PFKL_akg*K_PFKL_cit*K_PFKL_pep*Malate*pPFKL + F2_6BP*F6P_proxy_ar*Isocitrate*K_PFKL_akg*K_PFKL_cit*Malate*PEP*pPFKL + F2_6BP*F6P_proxy_ar*Isocitrate*K_PFKL_cit*K_PFKL_mal*K_PFKL_pep*pPFKL*s2_oxoglutarate + F2_6BP*F6P_proxy_ar*Isocitrate*K_PFKL_cit*K_PFKL_mal*PEP*pPFKL*s2_oxoglutarate + F2_6BP*F6P_proxy_ar*Isocitrate*K_PFKL_cit*K_PFKL_pep*Malate*pPFKL*s2_oxoglutarate + F2_6BP*F6P_proxy_ar*Isocitrate*K_PFKL_cit*Malate*PEP*pPFKL*s2_oxoglutarate + F2_6BP*F6P_proxy_ar*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_cit*K_PFKL_icit*K_PFKL_mal*K_PFKL_pep + F2_6BP*F6P_proxy_ar*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_cit*K_PFKL_icit*K_PFKL_mal*PEP + F2_6BP*F6P_proxy_ar*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_cit*K_PFKL_icit*K_PFKL_pep*Malate + F2_6BP*F6P_proxy_ar*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_cit*K_PFKL_icit*Malate*PEP + F2_6BP*F6P_proxy_ar*K_PFKL_PHOS_S775*K_PFKL_cit*K_PFKL_icit*K_PFKL_mal*K_PFKL_pep*s2_oxoglutarate + F2_6BP*F6P_proxy_ar*K_PFKL_PHOS_S775*K_PFKL_cit*K_PFKL_icit*K_PFKL_mal*PEP*s2_oxoglutarate + F2_6BP*F6P_proxy_ar*K_PFKL_PHOS_S775*K_PFKL_cit*K_PFKL_icit*K_PFKL_pep*Malate*s2_oxoglutarate + F2_6BP*F6P_proxy_ar*K_PFKL_PHOS_S775*K_PFKL_cit*K_PFKL_icit*Malate*PEP*s2_oxoglutarate + F2_6BP*F6P_proxy_ar*K_PFKL_akg*K_PFKL_cit*K_PFKL_icit*K_PFKL_mal*K_PFKL_pep*pPFKL + F2_6BP*F6P_proxy_ar*K_PFKL_akg*K_PFKL_cit*K_PFKL_icit*K_PFKL_mal*PEP*pPFKL + F2_6BP*F6P_proxy_ar*K_PFKL_akg*K_PFKL_cit*K_PFKL_icit*K_PFKL_pep*Malate*pPFKL + F2_6BP*F6P_proxy_ar*K_PFKL_akg*K_PFKL_cit*K_PFKL_icit*Malate*PEP*pPFKL + F2_6BP*F6P_proxy_ar*K_PFKL_cit*K_PFKL_icit*K_PFKL_mal*K_PFKL_pep*pPFKL*s2_oxoglutarate + F2_6BP*F6P_proxy_ar*K_PFKL_cit*K_PFKL_icit*K_PFKL_mal*PEP*pPFKL*s2_oxoglutarate + F2_6BP*F6P_proxy_ar*K_PFKL_cit*K_PFKL_icit*K_PFKL_pep*Malate*pPFKL*s2_oxoglutarate + F2_6BP*F6P_proxy_ar*K_PFKL_cit*K_PFKL_icit*Malate*PEP*pPFKL*s2_oxoglutarate + F2_6BP*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_cit*K_PFKL_f6p*K_PFKL_mal*K_PFKL_pep + F2_6BP*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_cit*K_PFKL_f6p*K_PFKL_mal*PEP + F2_6BP*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_cit*K_PFKL_f6p*K_PFKL_pep*Malate + F2_6BP*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_cit*K_PFKL_f6p*Malate*PEP + F2_6BP*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_cit*K_PFKL_f6p*K_PFKL_mal*K_PFKL_pep*s2_oxoglutarate + F2_6BP*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_cit*K_PFKL_f6p*K_PFKL_mal*PEP*s2_oxoglutarate + F2_6BP*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_cit*K_PFKL_f6p*K_PFKL_pep*Malate*s2_oxoglutarate + F2_6BP*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_cit*K_PFKL_f6p*Malate*PEP*s2_oxoglutarate + F2_6BP*Isocitrate*K_PFKL_akg*K_PFKL_cit*K_PFKL_f6p*K_PFKL_mal*K_PFKL_pep*pPFKL + F2_6BP*Isocitrate*K_PFKL_akg*K_PFKL_cit*K_PFKL_f6p*K_PFKL_mal*PEP*pPFKL + F2_6BP*Isocitrate*K_PFKL_akg*K_PFKL_cit*K_PFKL_f6p*K_PFKL_pep*Malate*pPFKL + F2_6BP*Isocitrate*K_PFKL_akg*K_PFKL_cit*K_PFKL_f6p*Malate*PEP*pPFKL + F2_6BP*Isocitrate*K_PFKL_cit*K_PFKL_f6p*K_PFKL_mal*K_PFKL_pep*pPFKL*s2_oxoglutarate + F2_6BP*Isocitrate*K_PFKL_cit*K_PFKL_f6p*K_PFKL_mal*PEP*pPFKL*s2_oxoglutarate + F2_6BP*Isocitrate*K_PFKL_cit*K_PFKL_f6p*K_PFKL_pep*Malate*pPFKL*s2_oxoglutarate + F2_6BP*Isocitrate*K_PFKL_cit*K_PFKL_f6p*Malate*PEP*pPFKL*s2_oxoglutarate + F2_6BP*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_cit*K_PFKL_f6p*K_PFKL_icit*K_PFKL_mal*K_PFKL_pep + F2_6BP*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_cit*K_PFKL_f6p*K_PFKL_icit*K_PFKL_mal*PEP + F2_6BP*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_cit*K_PFKL_f6p*K_PFKL_icit*K_PFKL_pep*Malate + F2_6BP*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_cit*K_PFKL_f6p*K_PFKL_icit*Malate*PEP + F2_6BP*K_PFKL_PHOS_S775*K_PFKL_cit*K_PFKL_f6p*K_PFKL_icit*K_PFKL_mal*K_PFKL_pep*s2_oxoglutarate + F2_6BP*K_PFKL_PHOS_S775*K_PFKL_cit*K_PFKL_f6p*K_PFKL_icit*K_PFKL_mal*PEP*s2_oxoglutarate + F2_6BP*K_PFKL_PHOS_S775*K_PFKL_cit*K_PFKL_f6p*K_PFKL_icit*K_PFKL_pep*Malate*s2_oxoglutarate + F2_6BP*K_PFKL_PHOS_S775*K_PFKL_cit*K_PFKL_f6p*K_PFKL_icit*Malate*PEP*s2_oxoglutarate + F2_6BP*K_PFKL_akg*K_PFKL_cit*K_PFKL_f6p*K_PFKL_icit*K_PFKL_mal*K_PFKL_pep*pPFKL + F2_6BP*K_PFKL_akg*K_PFKL_cit*K_PFKL_f6p*K_PFKL_icit*K_PFKL_mal*PEP*pPFKL + F2_6BP*K_PFKL_akg*K_PFKL_cit*K_PFKL_f6p*K_PFKL_icit*K_PFKL_pep*Malate*pPFKL + F2_6BP*K_PFKL_akg*K_PFKL_cit*K_PFKL_f6p*K_PFKL_icit*Malate*PEP*pPFKL + F2_6BP*K_PFKL_cit*K_PFKL_f6p*K_PFKL_icit*K_PFKL_mal*K_PFKL_pep*pPFKL*s2_oxoglutarate + F2_6BP*K_PFKL_cit*K_PFKL_f6p*K_PFKL_icit*K_PFKL_mal*PEP*pPFKL*s2_oxoglutarate + F2_6BP*K_PFKL_cit*K_PFKL_f6p*K_PFKL_icit*K_PFKL_pep*Malate*pPFKL*s2_oxoglutarate + F2_6BP*K_PFKL_cit*K_PFKL_f6p*K_PFKL_icit*Malate*PEP*pPFKL*s2_oxoglutarate + F6P_proxy_ar*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_mal*K_PFKL_pep + F6P_proxy_ar*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_mal*PEP + F6P_proxy_ar*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_pep*Malate + F6P_proxy_ar*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_cit*K_PFKL_f26bp*Malate*PEP + F6P_proxy_ar*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_mal*K_PFKL_pep*s2_oxoglutarate + F6P_proxy_ar*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_mal*PEP*s2_oxoglutarate + F6P_proxy_ar*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_pep*Malate*s2_oxoglutarate + F6P_proxy_ar*Isocitrate*K_PFKL_PHOS_S775*K_PFKL_cit*K_PFKL_f26bp*Malate*PEP*s2_oxoglutarate + F6P_proxy_ar*Isocitrate*K_PFKL_akg*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_mal*K_PFKL_pep*pPFKL + F6P_proxy_ar*Isocitrate*K_PFKL_akg*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_mal*PEP*pPFKL + F6P_proxy_ar*Isocitrate*K_PFKL_akg*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_pep*Malate*pPFKL + F6P_proxy_ar*Isocitrate*K_PFKL_akg*K_PFKL_cit*K_PFKL_f26bp*Malate*PEP*pPFKL + F6P_proxy_ar*Isocitrate*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_mal*K_PFKL_pep*pPFKL*s2_oxoglutarate + F6P_proxy_ar*Isocitrate*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_mal*PEP*pPFKL*s2_oxoglutarate + F6P_proxy_ar*Isocitrate*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_pep*Malate*pPFKL*s2_oxoglutarate + F6P_proxy_ar*Isocitrate*K_PFKL_cit*K_PFKL_f26bp*Malate*PEP*pPFKL*s2_oxoglutarate + F6P_proxy_ar*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_icit*K_PFKL_mal*K_PFKL_pep + F6P_proxy_ar*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_icit*K_PFKL_mal*PEP + F6P_proxy_ar*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_icit*K_PFKL_pep*Malate + F6P_proxy_ar*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_icit*Malate*PEP + F6P_proxy_ar*K_PFKL_PHOS_S775*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_icit*K_PFKL_mal*K_PFKL_pep*s2_oxoglutarate + F6P_proxy_ar*K_PFKL_PHOS_S775*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_icit*K_PFKL_mal*PEP*s2_oxoglutarate + F6P_proxy_ar*K_PFKL_PHOS_S775*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_icit*K_PFKL_pep*Malate*s2_oxoglutarate + F6P_proxy_ar*K_PFKL_PHOS_S775*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_icit*Malate*PEP*s2_oxoglutarate + F6P_proxy_ar*K_PFKL_akg*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_icit*K_PFKL_mal*K_PFKL_pep*pPFKL + F6P_proxy_ar*K_PFKL_akg*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_icit*K_PFKL_mal*PEP*pPFKL + F6P_proxy_ar*K_PFKL_akg*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_icit*K_PFKL_pep*Malate*pPFKL + F6P_proxy_ar*K_PFKL_akg*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_icit*Malate*PEP*pPFKL + F6P_proxy_ar*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_icit*K_PFKL_mal*K_PFKL_pep*pPFKL*s2_oxoglutarate + F6P_proxy_ar*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_icit*K_PFKL_mal*PEP*pPFKL*s2_oxoglutarate + F6P_proxy_ar*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_icit*K_PFKL_pep*Malate*pPFKL*s2_oxoglutarate + F6P_proxy_ar*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_icit*Malate*PEP*pPFKL*s2_oxoglutarate + Isocitrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_mal*K_PFKL_pep + Isocitrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_mal*PEP + Isocitrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_pep*Malate + Isocitrate*K_PFKL_PHOS_S775*K_PFKL_akg*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_f6p*Malate*PEP + Isocitrate*K_PFKL_PHOS_S775*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_mal*K_PFKL_pep*s2_oxoglutarate + Isocitrate*K_PFKL_PHOS_S775*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_mal*PEP*s2_oxoglutarate + Isocitrate*K_PFKL_PHOS_S775*K_PFKL_cit*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_pep*Mal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al*PEP*pPFKL*s2_oxoglutarate + K_PFKL_cit*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_icit*K_PFKL_pep*Malate*pPFKL*s2_oxoglutarate + K_PFKL_cit*K_PFKL_f26bp*K_PFKL_f6p*K_PFKL_icit*Malate*PEP*pPFKL*s2_oxoglutarate)
	fRate1() = Citrate*K_FBPase_f26bp*Vf_FBPase/(Citrate*F1_6BP*F2_6BP + Citrate*F1_6BP*K_FBPase_f26bp + Citrate*F2_6BP*K_FBPase_f16bp + Citrate*K_FBPase_f16bp*K_FBPase_f26bp + F1_6BP*F2_6BP*K_FBPase_cit + F1_6BP*K_FBPase_cit*K_FBPase_f26bp + F2_6BP*K_FBPase_cit*K_FBPase_f16bp + K_FBPase_cit*K_FBPase_f16bp*K_FBPase_f26bp)
	fRate3() = -k_mal
	fRate4() = -k_akg
	fRate5() = -k_pep
	fRate6() = -k_icit
	fRate7() = -k_f26bp
	fRate8() = -k_cit
	fRate9() = -k_f6p
	fRate11() = 7.78160761103111*insulin
	fRate12() = 9.93311225447353*pmTOR
	fRate13() = 0.363030286526969*insulin
	fRate14() = 3.88248960751442e-5*pmTOR
	fRate18() = 0.00919578911309774*p1IR_complex
	fRate18m() = 0.00919578911309774*p1IR_complex
	fRate22() = 0.419682384304397*pAKT
	fRate22m() = 0.419682384304397*pAKT
	fRate24() = 0.00752464611370891*pmTOR
	fRate24m() = 0.00752464611370891*pmTOR
	fRate25() = 1.95497593092361*pX
	fRate26() = 0.00105342379833469*pmTOR
	fRate26m() = 0.00105342379833469*pmTOR
	fRate28() = 26.8316707654711*pS6K
	fRate28m() = 26.8316707654711*pS6K
end functions
begin reaction rules
	re30: F6P_proxy() -> F1_6BP() fRate0() #Modifiers(s1, s5, s6, s7, s8, s9, s10, s13, s9, s7, s5, s10, s6, s8, s13, s22)
	re31: F1_6BP() -> F6P_proxy() fRate1() #Modifiers(s2, s9, s10, s9, s10, s4)
	re32: F1_6BP() -> sa4_degraded() k_ALDO #Modifiers(s12, s4)
	re33_reactants_0: 0  -> Malate() -1*(fRate3())
	re33_products_0: 0  -> sa8_degraded() fRate3()
	re34_reactants_0: 0  -> s2_oxoglutarate() -1*(fRate4())
	re34_products_0: 0  -> sa7_degraded() fRate4()
	re35_reactants_0: 0  -> PEP() -1*(fRate5())
	re35_products_0: 0  -> sa5_degraded() fRate5()
	re36_reactants_0: 0  -> Isocitrate() -1*(fRate6())
	re36_products_0: 0  -> sa6_degraded() fRate6()
	re37_reactants_0: 0  -> F2_6BP() -1*(fRate7())
	re37_products_0: 0  -> sa9_degraded() fRate7()
	re38_reactants_0: 0  -> Citrate() -1*(fRate8())
	re38_products_0: 0  -> sa10_degraded() fRate8()
	re39_reactants_0: 0  -> F6P() -1*(fRate9())
	re39_products_0: 0  -> sa3_degraded() fRate9()
	re40: pro_IR_complex() <-> IR_complex() r11_k1,r11_k1 #Modifiers(s24, s23)
	re41: IR_complex() <-> p1IR_complex() fRate11(),r12_k2 #Modifiers(s23, s25)
	re42: IR_complex() -> p2IR_complex() fRate12() #Modifiers(s31, s23, s31)
	re43: p2IR_complex() <-> p1p2IRcomplex() fRate13(),r14_k2 #Modifiers(s26, s27)
	re44: p1IR_complex() -> p1p2IRcomplex() fRate14() #Modifiers(s31, s25, s31)
	re45: p1p2IRcomplex() -> p1IR_complex() r16_k1 #Modifiers(s27)
	re46: p2IR_complex() -> IR_complex() r17_k1 #Modifiers(s26)
	re47: p1p2IRcomplex() -> sa28_degraded() r18_k1 #Modifiers(s27)
	re48: AKT() <-> pAKT() fRate18(),fRate18m() #Modifiers(s25, s28, s29, s25)
	re49: pAKT() -> AKT() r20_k1 #Modifiers(s29)
	re50: p2IR_complex() -> sa27_degraded() r21_k1 #Modifiers(s26)
	re51: p1IR_complex() -> sa26_degraded() r22_k1 #Modifiers(s25)
	re52: mTOR() <-> pmTOR() fRate22(),fRate22m() #Modifiers(s29, s30, s31, s29)
	re53: pmTOR() -> mTOR() r24_k1 #Modifiers(s31)
	re54: S6K() <-> pS6K() fRate24(),fRate24m() #Modifiers(s31, s32, s33, s31)
	re55: pS6K() -> S6K() fRate25() #Modifiers(s35, s33, s35)
	re56: X() <-> pX() fRate26(),fRate26m() #Modifiers(s31, s34, s35, s31)
	re57: pX() -> X() r28_k1 #Modifiers(s35)
	re58: PFKL() <-> pPFKL() fRate28(),fRate28m() #Modifiers(s33, s1, s13, s33)
	re59: pPFKL() -> PFKL() r30_k1 #Modifiers(s13)
end reaction rules
end model
