###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000567', 'http://identifiers.org/biomodels.db/MODEL1501160000']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/18247636']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/pubmed/15794636', 'http://identifiers.org/doi/10.1021/ja9705102', 'http://identifiers.org/pubmed/12186976', 'http://identifiers.org/pubmed/12785778', 'http://identifiers.org/pubmed/16301322', 'http://identifiers.org/pubmed/16981679', 'http://identifiers.org/pubmed/16117499', 'http://identifiers.org/pubmed/16536526', 'http://identifiers.org/pubmed/16081040', 'http://identifiers.org/pubmed/16981684', 'http://identifiers.org/pubmed/16981683', 'http://identifiers.org/pubmed/16981676']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:1990000']
#@BQB_HAS_PROPERTY:['http://identifiers.org/doid/DOID:12858', 'http://identifiers.org/doid/DOID:10652', 'http://identifiers.org/doid/DOID:14330']
#@creatorEmail:'lloret@ebi.ac.uk'
#@creatorName:'Lloret i Villas Audald'
#@notes:'This is a plain translation of an SBML model created on 14/08/2021. The original model has 2 molecules and 2 reactions. The translated model has 2 molecules and 2 rules'
###
begin model
begin parameters
	k1 4e-05
	k2 1.57e-06
	k2A0 0.29
end parameters
begin molecule types
	B()
	A()
end molecule types
begin seed species
	$A() 6.022e+20 # (1.0 * 0.001)mol/L * 6.022e23/mol *1.0L #A #A
end seed species
begin observables
	Species B B() #B
	Species A A() #A
end observables
begin functions
	A0() = k2A0/k2
	B_ar() = A0 - (A0 + k1/k2)/(1 + k1*exp((A0*k2 + k1)*time())/(A0*k2))
end functions
begin reaction rules
	Nucleation: A() -> B() k1 #Modifiers(A)
	Growth: A() + B() -> B() + B() k2 #Modifiers(A, B)
end reaction rules
end model
