###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000579', 'http://identifiers.org/biomodels.db/MODEL1507210000']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/26053019']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0006091']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is a plain translation of an SBML model created on 13/08/2021. The original model has 240 molecules and 175 reactions. The translated model has 162 molecules and 411 rules'
###
begin model
begin parameters
	Mg2pl_default 5.1187000000000004e+26 #original 850.0substance/volume
	Mg2pl 5.1187000000000004e+26 #original 850.0substance/volume
	Mg2pl_c1 5.1187000000000004e+26 #original 850.0substance/volume
	Mg2pl 5.1187000000000004e+26 #original 850.0substance/volume
	r1_k1 1.000000
	r2_k1 1.000000
	r3_k1 1.000000
	r4_k1 1.000000
	r5_k1 1.000000
	r6_k1 1.000000
	r7_k1 1.000000
	r8_k1 1.000000
	r9_k1 1.000000
	r10_k1 1.000000
	r11_k1 1.000000
	r12_k1 1.000000
	r13_k1 1.000000
	r14_k1 1.000000
	r15_k1 1.000000
	r16_k1 1.000000
	r17_k1 1.000000
	r18_k1 1.000000
	r19_k1 1.000000
	r20_k1 1.000000
	r21_k1 1.000000
	r22_k1 1.000000
	r23_k1 1.000000
	r24_k1 1.000000
	r25_k1 1.000000
	r26_k1 1.000000
	r27_k1 1.000000
	r28_k1 1.000000
	r29_k1 1.000000
	r30_k1 1.000000
	r31_k1 1.000000
	r31_k2 1.000000
	r32_k1 1.000000
	r33_k1 1.000000
	r34_k1 1.000000
	r35_k1 1.000000
	r36_k1 1.000000
	r37_k1 1.000000
	r38_k1 1.000000
	r39_k1 1.000000
	r40_k1 1.000000
	r41_k1 1.000000
	r42_k1 1.000000
	r43_k1 1.000000
	r44_k1 1.000000
	r45_k1 1.000000
	r46_k1 1.000000
	r47_k1 1.000000
	r48_k1 1.000000
	r49_k1 1.000000
	r50_k1 1.000000
	r51_k1 1.000000
	r52_k1 1.000000
	r53_k1 1.000000
	r54_k1 1.000000
	r55_k1 1.000000
	r56_k1 1.000000
	r57_k1 1.000000
	r58_k1 1.000000
	r59_k1 1.000000
	r60_k1 1.000000
	r61_k1 1.000000
	r62_k1 1.000000
	r63_k1 1.000000
	r64_k1 1.000000
	r65_k1 1.000000
	r66_v1 1.000000
	r66_k1 0.069000
	r67_v1 1.000000
	r67_k1 0.048000
	r68_v1 1.000000
	r68_k1 0.040000
	r69_k1 1.000000
	r70_v1 1.000000
	r70_k1 875.000000
	r71_v1 1.000000
	r71_k1 0.013000
	r72_v1 1.000000
	r72_k1 0.000380
	r73_v1 1.000000
	r73_k1 1.300000
	r74_v1 1.000000
	r74_k1 13.600000
	r75_v1 1.000000
	r75_k1 13.000000
	r76_v1 1.000000
	r76_k1 0.100000
	r77_v1 1.000000
	r77_k1 5.800000
	r78_v1 1.000000
	r78_k1 0.110000
	r79_v1 1.000000
	r79_k1 73.000000
	r80_v1 1.000000
	r80_k1 490.000000
	r81_v1 1.000000
	r81_k1 0.090000
	r82_v1 1.000000
	r82_k1 2.000000
	r83_v1 1.000000
	r83_k1 0.000213
	r84_v1 1.000000
	r84_k1 33.000000
	r85_v1 1.000000
	r85_k1 300.000000
	r86_v1 1.000000
	r86_k1 300.000000
	r87_v1 1.000000
	r87_k1 791.000000
	r88_v1 1.000000
	r88_k1 0.110000
	r89_v1 1.000000
	r89_k1 40.000000
	r90_k1 1.000000
	r91_k1 1.000000
	r92_k1 1.000000
	r93_k1 1.000000
	r94_k1 1.000000
	r95_k1 1.000000
	r96_k1 1.000000
	r97_k1 1.000000
	r98_k1 1.000000
	r99_k1 1.000000
	r100_k1 1.000000
	r101_k1 1.000000
	r102_k1 1.000000
	r103_k1 1.000000
	r104_k1 1.000000
	r105_v1 1.000000
	r105_k1 0.040000
	r106_v1 1.000000
	r106_k1 18.200000
	r107_v1 1.000000
	r107_k1 0.157000
	r108_v1 1.000000
	r108_k1 13.600000
	r109_v1 1.000000
	r109_k1 140.000000
	r110_v1 1.000000
	r110_k1 0.066000
	r111_v1 1.000000
	r111_k1 0.130000
	r112_v1 1.000000
	r112_k1 0.045000
	r113_v1 1.000000
	r113_k1 0.100000
	r114_v1 1.000000
	r114_k1 0.080000
	r115_v1 1.000000
	r115_k1 0.100000
	r116_v1 1.000000
	r116_k1 10.000000
	r117_v1 1.000000
	r117_k1 0.580000
	r118_v1 1.000000
	r118_k1 1.700000
	r119_v1 1.000000
	r119_k1 0.310000
	r120_v1 1.000000
	r120_k1 1.370000
	r121_v1 1.000000
	r121_k1 970.000000
	r122_v1 1.000000
	r122_k1 0.130000
	r123_v1 1.000000
	r123_k1 294.000000
	r124_v1 1.000000
	r124_k1 1.280000
	r125_v1 1.000000
	r125_k1 12.600000
	r126_v1 1.000000
	r126_k1 18.700000
	r127_v1 1.000000
	r127_k1 0.080000
	r128_v1 1.000000
	r128_k1 0.190000
	r129_v1 1.000000
	r129_k1 0.190000
	r130_v1 1.000000
	r130_k1 2900.000000
	r131_v1 1.000000
	r131_k1 2900.000000
	r132_v1 1.000000
	r132_k1 16.000000
	r133_v1 1.000000
	r133_k1 16.000000
	r134_v1 1.000000
	r134_k1 16.000000
	r135_v1 1.000000
	r135_k1 16.000000
	r136_v1 1.000000
	r136_k1 34.500000
	r137_v1 1.000000
	r137_k1 16.000000
	r138_v1 1.000000
	r138_k1 16.000000
	r139_v1 1.000000
	r139_k1 16.000000
	r139_v2 1.000000
	r139_k2 16.000000
	r140_v1 1.000000
	r140_k1 16.000000
	r141_v1 1.000000
	r141_k1 16.000000
	r142_v1 1.000000
	r142_k1 100.000000
	r143_v1 1.000000
	r143_k1 16.000000
	r144_v1 1.000000
	r144_k1 3.000000
	r145_v1 1.000000
	r145_k1 3.000000
	r146_v1 1.000000
	r146_k1 3.000000
	r147_v1 1.000000
	r147_k1 3.000000
	r148_v1 1.000000
	r148_k1 3.000000
	r149_v1 1.000000
	r149_k1 3.000000
	r150_v1 1.000000
	r150_k1 3.000000
	r151_v1 1.000000
	r151_k1 3.000000
	r152_v1 1.000000
	r152_k1 3.000000
	r153_v1 1.000000
	r153_k1 3.000000
	r154_v1 1.000000
	r154_k1 100.000000
	r155_v1 1.000000
	r155_k1 100.000000
	r156_v1 1.000000
	r156_k1 100.000000
	r157_v1 1.000000
	r157_k1 100.000000
	r158_v1 1.000000
	r158_k1 100.000000
	r159_v1 1.000000
	r159_k1 100.000000
	r160_v1 1.000000
	r160_k1 100.000000
	r161_v1 1.000000
	r161_k1 100.000000
	r162_v1 1.000000
	r162_k1 100.000000
	r163_v1 1.000000
	r163_k1 100.000000
	r164_v1 1.000000
	r164_k1 34.500000
	r165_v1 1.000000
	r165_k1 34.500000
	r166_v1 1.000000
	r166_k1 34.500000
	r167_v1 1.000000
	r167_k1 34.500000
	r168_v1 1.000000
	r168_k1 34.500000
	r169_v1 1.000000
	r169_k1 34.500000
	r170_v1 1.000000
	r170_k1 34.500000
	r171_v1 1.000000
	r171_k1 34.500000
	r172_v1 1.000000
	r172_k1 34.500000
	r173_v1 1.000000
	r173_k1 34.500000
	r174_v1 1.000000
	r174_k1 1.160000
	r175_v1 1.000000
	r175_k1 9.600000
end parameters
begin compartments
	#volume units: volume
	default 3 1.0
	c1 3 1.0 #mitochondria
	c2 3 1.0 #mit_inner_membrane
	c3 3 1.0 #IMS
	c4 3 1.0 #mit_outer_membrane
end compartments
begin molecule types
	Alphaketoacid()
	F6P()
	AMP()
	Glutamine()
	GA3P()
	Citrulline()
	FA()
	FMN()
	C6Acyl_CoA()
	HCO3_plNH4pl()
	Unbranchedalpha__1_4__polymer()
	F1P()
	C4Acyl_CoA()
	C8Acyl_CoA()
	C20AcylCoA_cyt()
	C18AcylCoA_cyt()
	C16Acyl_CoA()
	Cyb()
	Ornithine()
	LIPOATE()
	C10Ketoacyl_CoA()
	Isocitrate()
	AcetoacetylCoA()
	NADpl()
	Glyceraldehyde()
	Carnitine_cyt()
	Glycogen()
	C18car_ims()
	NADPH()
	Triglyceride()
	Sedoheptulase7P()
	Fructose()
	FADH2()
	C12L_3_hydroxyacyl_CoA()
	Alpha_KG()
	Acetoacetate()
	C8Ketoacyl_CoA()
	C10Acyl_CoA()
	G6P()
	C202_trans_enoyl_CoA()
	ACoA()
	s2e()
	UDP_Glucose()
	F1_6P()
	AlphaKG()
	s2_PGA()
	C18Ketoacyl_CoA()
	C20car_ims()
	s2NADH()
	C14AcylCoA_cyt()
	Co_Ash()
	Malate()
	CyC()
	C182_trans_enoyl_CoA()
	Arginine()
	C162_trans_enoyl_CoA()
	TPP()
	H2O()
	Succinate()
	Ribose5P()
	C102_trans_enoyl_CoA()
	NADH_s351()
	Glycerol3P()
	s2ADP()
	SCoA()
	C6Ketoacyl_CoA()
	Creatine()
	C16Ketoacyl_CoA()
	Citrate()
	car_mat()
	s3_PGA()
	NAPDH()
	H20()
	Pyruvate()
	D_Beta_Hydroxybutyrate()
	C4L_3_hydroxyacyl_CoA()
	Glucose()
	C22Ketoacyl_CoA()
	C222_trans_enoyl_CoA()
	C18Acyl_CoA()
	Q()
	Lactate()
	C16car_ims()
	C14Ketoacyl_CoA()
	s1_2O2()
	Acetone()
	LimitDextrin()
	C4Ketoacyl_CoA()
	s6PGluconate()
	C42_trans_enoyl_CoA()
	C82_trans_enoyl_CoA()
	s6PGDL()
	C142_trans_enoyl_CoA()
	GlycogenPrimer()
	C22L_3_hydroxyacyl_CoA()
	C20Ketoacyl_CoA()
	NADH()
	C22AcylCoA_cyt()
	UDP()
	C12Acyl_CoA()
	AcetylCoA()
	Hpl()
	s2NADpl()
	C62_trans_enoyl_CoA()
	Alanine()
	C122_trans_enoyl_CoA()
	s2Hpl()
	ADP()
	Glutamate()
	DHAP()
	Galactose()
	NADPpl()
	Aspartate()
	ATP()
	FAD()
	G1P()
	Erythrose4P()
	GDP()
	C20Acyl_CoA()
	s1_3_BiPGA()
	Arginosuccinate()
	C14car_ims()
	C6L_3_hydroxyacyl_CoA()
	cis_Aconitate()
	Trehalose()
	QH2()
	C18L_3_hydroxyacyl_CoA()
	CoA_SH()
	C8L_3_hydroxyacyl_CoA()
	Fumarate()
	C16L_3_hydroxyacyl_CoA()
	Xylulose5P()
	PPi()
	CyC2()
	C22Acyl_CoA()
	s2ATP()
	NADH_s381()
	CitrullylAMPintermediate()
	C10L_3_hydroxyacyl_CoA()
	UREA()
	Aminoacids()
	C16AcylCoA_cyt()
	Carbamoylphosphate()
	Lactose()
	GTP()
	Cya_a3()
	Pi()
	Galactose1P()
	Sucrose()
	C14Acyl_CoA()
	PEP()
	C20L_3_hydroxyacyl_CoA()
	C12Ketoacyl_CoA()
	C14L_3_hydroxyacyl_CoA()
	OAA()
	FeS()
	CO2()
	Creatinephosphate()
	OXALOACETATE()
	C22car_ims()
	D_Ribulose5P()
	HMGCoA()
end molecule types
begin seed species
	@c1:cis_Aconitate() 7.8286e+24 # 13.0mol/L * 6.022e23/mol *1.0L #cis_Aconitate #s4
	@c1:car_mat() 2.5894600000000002e+25 #original 43.0substance/volume  #car_mat #s136
	@default:Xylulose5P() 2.5894600000000002e+23 #original 0.43substance/volume  #Xylulose5P #s188
	@c1:UREA() 3.9143e+27 #original 6500.0substance/volume  #UREA #s49
	@default:UDP_Glucose() 9.334100000000001e+25 #original 155.0substance/volume  #UDP_Glucose #s335
	@default:UDP() 2.46902e+25 #original 41.0substance/volume  #UDP #s199
	@default:Triglyceride() 2.601504e+25 #original 43.2substance/volume  #Triglyceride #s292
	@default:Trehalose() 3.3723200000000002e+22 #original 0.056substance/volume  #Trehalose #s297
	@c1:TPP() 1.9270400000000003e+21 #original 0.0032substance/volume  #TPP #s94
	@default:Sucrose() 1.08396e+24 #original 1.8substance/volume  #Sucrose #s284
	@default:Sedoheptulase7P() 5.3595800000000006e+23 #original 0.89substance/volume  #Sedoheptulase7P #s244
	@c1:SCoA() 1.2044e+25 #original 20.0substance/volume  #SCoA #s6
	@default:Ribose5P() 7.94904e+24 #original 13.2substance/volume  #Ribose5P #s187
	@c2:QH2() 4.4562800000000004e+24 #original 7.4substance/volume  #QH2 #s388
	@default:Pyruvate() 3.85408e+25 #original 64.0substance/volume  #Pyruvate #s11
	@default:Pi() 2.2829402000000003e+26 #original 379.1substance/volume  #Pi #s44
	@c1:Pi() 2.2829402000000003e+26 #original 379.1substance/volume  #Pi #s344
	@default:PPi() 1.08396e+24 #original 1.8substance/volume  #PPi #s200
	@c1:PPi() 1.08396e+24 #original 1.8substance/volume  #PPi #s363
	@default:PEP() 1.047828e+25 #original 17.4substance/volume  #PEP #s10
	@c1:Ornithine() 5.35958e+25 #original 89.0substance/volume  #Ornithine #s34
	@default:OXALOACETATE() 3.67342e+25 #original 61.0substance/volume  #OXALOACETATE #s81
	@c1:OAA() 3.67342e+25 #original 61.0substance/volume  #OAA #s50
	@default:NAPDH() 3.07122e+25 #original 51.0substance/volume  #NAPDH #s190
	@default:NADPH() 3.07122e+25 #original 51.0substance/volume  #NADPH #s185
	@default:NADH() 1.32484e+25 #original 22.0substance/volume  #NADH #s67
	@c1:NADH_s351() 1.32484e+25 #original 22.0substance/volume  #NADH_s351 #s351
	@c1:NADH_s381() 1.32484e+25 #original 22.0substance/volume  #NADH_s381 #s381
	@default:NADpl() 1.44528e+25 #original 24.0substance/volume  #NADpl #s93
	@c1:NADpl() 1.44528e+25 #original 24.0substance/volume  #NADpl #s355
	@c1:Malate() 1.9270400000000003e+24 #original 3.2substance/volume  #Malate #s9
	@default:Lactose() 8.731900000000001e+23 #original 1.45substance/volume  #Lactose #s307
	@default:Lactate() 4.4562800000000004e+26 #original 740.0substance/volume  #Lactate #s296
	@c1:LIPOATE() 4.63694e+22 #original 0.077substance/volume  #LIPOATE #s95
	@c1:Isocitrate() 3.6132e+24 #original 6.0substance/volume  #Isocitrate #s52
	@c1:HMGCoA() 1.5055e+23 #original 0.25substance/volume  #HMGCoA #s322
	@c1:HCO3_plNH4pl() 1.4994780000000001e+28 #original 24900.0substance/volume  #HCO3_plNH4pl #s25
	@default:H2O() 3.3121e+31 #original 55000000.0substance/volume  #H2O #s64
	@c1:H2O() 3.3121e+31 #original 55000000.0substance/volume  #H2O #s347
	@default:H20() 3.3121e+31 #original 55000000.0substance/volume  #H20 #s32
	@default:Glycogen() 2.6075259999999998e+25 #original 43.3substance/volume  #Glycogen #s198
	@default:Glycerol3P() 1.8066000000000001e+25 #original 30.0substance/volume  #Glycerol3P #s51
	@default:Glyceraldehyde() 8.888472000000001e+26 #original 1476.0substance/volume  #Glyceraldehyde #s293
	@c1:Glutamine() 3.528892e+26 #original 586.0substance/volume  #Glutamine #s340
	@default:Glutamine() 3.528892e+26 #original 586.0substance/volume  #Glutamine #s378
	@c1:Glutamate() 4.7573800000000003e+24 #original 7.9substance/volume  #Glutamate #s341
	@default:Glutamate() 4.7573800000000003e+24 #original 7.9substance/volume  #Glutamate #s379
	@default:Glucose() 2.673768e+27 #original 4440.0substance/volume  #Glucose #s71
	@default:Galactose1P() 1.86682e+25 #original 31.0substance/volume  #Galactose1P #s302
	@default:Galactose() 5.317426e+25 #original 88.3substance/volume  #Galactose #s306
	@default:GTP() 3.3723200000000003e+25 #original 56.0substance/volume  #GTP #s48
	@default:GDP() 9.033000000000001e+24 #original 15.0substance/volume  #GDP #s241
	@c1:GDP() 9.033000000000001e+24 #original 15.0substance/volume  #GDP #s352
	@default:GA3P() 2.89056e+24 #original 4.8substance/volume  #GA3P #s35
	@default:G6P() 1.7524020000000002e+25 #original 29.1substance/volume  #G6P #s234
	@default:G1P() 3.011e+24 #original 5.0substance/volume  #G1P #s195
	@c1:Fumarate() 9.033e+23 #original 1.5substance/volume  #Fumarate #s40
	@default:Fructose() 1.86682e+25 #original 31.0substance/volume  #Fructose #s286
	@c2:FMN() 4.5165e+21 #original 0.0075substance/volume  #FMN #s269
	@c1:FAD() 4.5165e+22 #original 0.075substance/volume  #FAD #s356
	@default:F6P() 6.14244e+24 #original 10.2substance/volume  #F6P #s3
	@default:F1P() 1.0237400000000002e+23 #original 0.17substance/volume  #F1P #s285
	@default:F1_6P() 7.2264e+23 #original 1.2substance/volume  #F1_6P #s73
	@default:Erythrose4P() 1.065894e+27 #original 1770.0substance/volume  #Erythrose4P #s247
	@default:DHAP() 9.39432e+24 #original 15.6substance/volume  #DHAP #s82
	@default:D_Ribulose5P() 9.514760000000001e+23 #original 1.58substance/volume  #D_Ribulose5P #s183
	@c1:D_Beta_Hydroxybutyrate() 2.1679200000000002e+25 #original 36.0substance/volume  #D_Beta_Hydroxybutyrate #s325
	@default:CoA_SH() 1.2044e+25 #original 20.0substance/volume  #CoA_SH #s238
	@c1:CoA_SH() 1.2044e+25 #original 20.0substance/volume  #CoA_SH #s350
	@c1:Co_Ash() 1.2044e+25 #original 20.0substance/volume  #Co_Ash #s92
	@c1:Citrulline() 2.28836e+25 #original 38.0substance/volume  #Citrulline #s342
	@c1:Citrate() 1.14418e+26 #original 190.0substance/volume  #Citrate #s2
	@default:Carnitine_cyt() 2.5894600000000002e+25 #original 43.0substance/volume  #Carnitine_cyt #s126
	@default:CO2() 1.300752e+28 #original 21600.0substance/volume  #CO2 #s237
	@c1:CO2() 1.300752e+28 #original 21600.0substance/volume  #CO2 #s349
	@c1:Arginosuccinate() 1.9270400000000003e+21 #original 0.0032substance/volume  #Arginosuccinate #s39
	@c1:Arginine() 5.9617800000000005e+25 #original 99.0substance/volume  #Arginine #s343
	@default:AlphaKG() 5.359580000000001e+24 #original 8.9substance/volume  #AlphaKG #s21
	@default:Alanine() 2.005326e+26 #original 333.0substance/volume  #Alanine #s14
	@c1:Acetone() 1.8066000000000001e+25 #original 30.0substance/volume  #Acetone #s324
	@c1:Acetoacetate() 1.26462e+25 #original 21.0substance/volume  #Acetoacetate #s323
	@default:ATP() 8.37058e+26 #original 1390.0substance/volume  #ATP #s63
	@c1:ATP() 8.37058e+26 #original 1390.0substance/volume  #ATP #s345
	@c1:AMP() 3.07122e+25 #original 51.0substance/volume  #AMP #s47
	@default:ADP() 9.6352e+25 #original 160.0substance/volume  #ADP #s46
	@c1:ADP() 9.6352e+25 #original 160.0substance/volume  #ADP #s346
	@default:s6PGluconate() 1.6379840000000002e+27 #original 2720.0substance/volume  #s6PGluconate #s182
	@default:s6PGDL() 4.588764e+21 #original 0.00762substance/volume  #s6PGDL #s181
	@default:s3_PGA() 2.842384e+25 #original 47.2substance/volume  #s3_PGA #s8
	@default:s2NADH() 2.64968e+25 #original 44.0substance/volume  #s2NADH #s300
	@default:s2NADpl() 2.89056e+25 #original 48.0substance/volume  #s2NADpl #s301
	@c1:s2ATP() 1.674116e+27 #original 2780.0substance/volume  #s2ATP #s29
	@c1:s2ADP() 1.92704e+26 #original 320.0substance/volume  #s2ADP #s30
	@default:s2_PGA() 8.430800000000001e+24 #original 14.0substance/volume  #s2_PGA #s75
	@c1:s1_2O2() 2.095656e+27 #original 3480.0substance/volume  #s1_2O2 #s256
	@default:s1_3_BiPGA() 2.4088000000000004e+23 #original 0.4substance/volume  #s1_3_BiPGA #s74
	@c1:Creatinephosphate() 1.98726e+25 #original 33.0substance/volume  #Creatinephosphate #s124
	@c4:Creatine() 2.210074e+25 #original 36.7substance/volume  #Creatine #s123
end seed species
begin observables
	Species cis_Aconitate_c1 @c1:cis_Aconitate() #cis-Aconitate
	Species car_mat_c1 @c1:car_mat() #car_mat
	Species Xylulose5P_default @default:Xylulose5P() #Xylulose5P
	Species Unbranchedalpha__1_4__polymer_default @default:Unbranchedalpha__1_4__polymer() #Unbranched alpha(1,4)polymer
	Species UREA_c1 @c1:UREA() #UREA
	Species UDP_Glucose_default @default:UDP_Glucose() #UDP-Glucose
	Species UDP_default @default:UDP() #UDP
	Species Triglyceride_default @default:Triglyceride() #Triglyceride
	Species Trehalose_default @default:Trehalose() #Trehalose
	Species TPP_c1 @c1:TPP() #TPP
	Species Sucrose_default @default:Sucrose() #Sucrose
	Species Succinate_c1 @c1:Succinate() #Succinate
	Species Sedoheptulase7P_default @default:Sedoheptulase7P() #Sedoheptulase7P
	Species SCoA_c1 @c1:SCoA() #S CoA
	Species Ribose5P_default @default:Ribose5P() #Ribose5P
	Species QH2_c2 @c2:QH2() #QH2
	Species Q_c2 @c2:Q() #Q
	Species Pyruvate_default @default:Pyruvate() #Pyruvate
	Species Pi_default @default:Pi() #Pi
	Species Pi_c1 @c1:Pi() #Pi
	Species PPi_default @default:PPi() #PPi
	Species PPi_c1 @c1:PPi() #PPi
	Species PEP_default @default:PEP() #PEP
	Species Ornithine_c1 @c1:Ornithine() #Ornithine
	Species OXALOACETATE_default @default:OXALOACETATE() #OXALOACETATE
	Species OAA_c1 @c1:OAA() #OAA
	Species NAPDH_default @default:NAPDH() #NAPDH
	Species NADPH_default @default:NADPH() #NADPH
	Species NADPpl_default @default:NADPpl() #NADP+
	Species NADH_default @default:NADH() #NADH
	Species NADH_s351_c1 @c1:NADH_s351() #NADH
	Species NADH_s381_c1 @c1:NADH_s381() #NADH
	Species NADpl_default @default:NADpl() #NAD+
	Species NADpl_c1 @c1:NADpl() #NAD+
	Species Malate_c1 @c1:Malate() #Malate
	Species LimitDextrin_default @default:LimitDextrin() #Limit Dextrin
	Species Lactose_default @default:Lactose() #Lactose
	Species Lactate_default @default:Lactate() #Lactate
	Species LIPOATE_c1 @c1:LIPOATE() #LIPOATE
	Species Isocitrate_c1 @c1:Isocitrate() #Isocitrate
	Species HMGCoA_c1 @c1:HMGCoA() #HMGCoA
	Species HCO3_plNH4pl_c1 @c1:HCO3_plNH4pl() #HCO3-+ NH4+
	Species H2O_default @default:H2O() #H2O
	Species H2O_c1 @c1:H2O() #H2O
	Species H20_default @default:H20() #H20
	Species Hpl_default @default:Hpl() #H+
	Species Hpl_c1 @c1:Hpl() #H+
	Species GlycogenPrimer_default @default:GlycogenPrimer() #Glycogen Primer
	Species Glycogen_default @default:Glycogen() #Glycogen
	Species Glycerol3P_default @default:Glycerol3P() #Glycerol3P
	Species Glyceraldehyde_default @default:Glyceraldehyde() #Glyceraldehyde
	Species Glutamine_c1 @c1:Glutamine() #Glutamine
	Species Glutamine_default @default:Glutamine() #Glutamine
	Species Glutamate_c1 @c1:Glutamate() #Glutamate
	Species Glutamate_default @default:Glutamate() #Glutamate
	Species Glucose_default @default:Glucose() #Glucose
	Species Galactose1P_default @default:Galactose1P() #Galactose1P
	Species Galactose_default @default:Galactose() #Galactose
	Species GTP_default @default:GTP() #GTP
	Species GDP_default @default:GDP() #GDP
	Species GDP_c1 @c1:GDP() #GDP
	Species GA3P_default @default:GA3P() #GA3P
	Species G6P_default @default:G6P() #G6P
	Species G1P_default @default:G1P() #G1P
	Species Fumarate_c1 @c1:Fumarate() #Fumarate
	Species Fructose_default @default:Fructose() #Fructose
	Species FeS_c1 @c1:FeS() #FeS
	Species FeS_c2 @c2:FeS() #FeS
	Species FMN_c2 @c2:FMN() #FMN
	Species FADH2_c1 @c1:FADH2() #FADH2
	Species FAD_c1 @c1:FAD() #FAD
	Species FA_default @default:FA() #FA
	Species F6P_default @default:F6P() #F6P
	Species F1P_default @default:F1P() #F1P
	Species F1_6P_default @default:F1_6P() #F1,6P
	Species Erythrose4P_default @default:Erythrose4P() #Erythrose4P
	Species DHAP_default @default:DHAP() #DHAP
	Species D_Ribulose5P_default @default:D_Ribulose5P() #D-Ribulose5P
	Species D_Beta_Hydroxybutyrate_c1 @c1:D_Beta_Hydroxybutyrate() #D-Beta-Hydroxybutyrate
	Species Cyb_c2 @c2:Cyb() #Cyb
	Species Cya_a3_c2 @c2:Cya_a3() #Cya-a3
	Species CyC2_c2 @c2:CyC2() #CyC2
	Species CyC_c2 @c2:CyC() #CyC
	Species CoA_SH_default @default:CoA_SH() #CoA-SH
	Species CoA_SH_c1 @c1:CoA_SH() #CoA-SH
	Species Co_Ash_c1 @c1:Co_Ash() #Co-Ash
	Species CitrullylAMPintermediate_c1 @c1:CitrullylAMPintermediate() #Citrullyl AMP intermediate
	Species Citrulline_c1 @c1:Citrulline() #Citrulline
	Species Citrate_c1 @c1:Citrate() #Citrate
	Species Carnitine_cyt_default @default:Carnitine_cyt() #Carnitine_cyt
	Species Carbamoylphosphate_c1 @c1:Carbamoylphosphate() #Carbamoyl phosphate
	Species CO2_default @default:CO2() #CO2
	Species CO2_c1 @c1:CO2() #CO2
	Species C8Acyl_CoA_c1 @c1:C8Acyl_CoA() #C8Acyl-CoA
	Species C8L_3_hydroxyacyl_CoA_c1 @c1:C8L_3_hydroxyacyl_CoA() #C8 L-3-hydroxyacyl-CoA
	Species C8Ketoacyl_CoA_c1 @c1:C8Ketoacyl_CoA() #C8 Ketoacyl-CoA
	Species C82_trans_enoyl_CoA_c1 @c1:C82_trans_enoyl_CoA() #C8 2-trans-enoyl-CoA
	Species C6Acyl_CoA_c1 @c1:C6Acyl_CoA() #C6Acyl-CoA
	Species C6L_3_hydroxyacyl_CoA_c1 @c1:C6L_3_hydroxyacyl_CoA() #C6 L-3-hydroxyacyl-CoA
	Species C6Ketoacyl_CoA_c1 @c1:C6Ketoacyl_CoA() #C6 Ketoacyl-CoA
	Species C62_trans_enoyl_CoA_c1 @c1:C62_trans_enoyl_CoA() #C6 2-trans-enoyl-CoA
	Species C4Acyl_CoA_c1 @c1:C4Acyl_CoA() #C4Acyl-CoA
	Species C4L_3_hydroxyacyl_CoA_c1 @c1:C4L_3_hydroxyacyl_CoA() #C4 L-3-hydroxyacyl-CoA
	Species C4Ketoacyl_CoA_c1 @c1:C4Ketoacyl_CoA() #C4 Ketoacyl-CoA
	Species C42_trans_enoyl_CoA_c1 @c1:C42_trans_enoyl_CoA() #C4 2-trans-enoyl-CoA
	Species C22car_ims_c3 @c3:C22car_ims() #C22car_ims
	Species C22car_ims_c1 @c1:C22car_ims() #C22car_ims
	Species C22Acyl_CoA_c1 @c1:C22Acyl_CoA() #C22Acyl-CoA
	Species C22L_3_hydroxyacyl_CoA_c1 @c1:C22L_3_hydroxyacyl_CoA() #C22 L-3-hydroxyacyl-CoA
	Species C22Ketoacyl_CoA_c1 @c1:C22Ketoacyl_CoA() #C22 Ketoacyl-CoA
	Species C22AcylCoA_cyt_default @default:C22AcylCoA_cyt() #C22 AcylCoA_cyt
	Species C222_trans_enoyl_CoA_c1 @c1:C222_trans_enoyl_CoA() #C22 2-trans-enoyl-CoA
	Species C20car_ims_c3 @c3:C20car_ims() #C20car_ims
	Species C20car_ims_c1 @c1:C20car_ims() #C20car_ims
	Species C20Acyl_CoA_c1 @c1:C20Acyl_CoA() #C20Acyl-CoA
	Species C20L_3_hydroxyacyl_CoA_c1 @c1:C20L_3_hydroxyacyl_CoA() #C20 L-3-hydroxyacyl-CoA
	Species C20Ketoacyl_CoA_c1 @c1:C20Ketoacyl_CoA() #C20 Ketoacyl-CoA
	Species C20AcylCoA_cyt_default @default:C20AcylCoA_cyt() #C20 AcylCoA_cyt
	Species C202_trans_enoyl_CoA_c1 @c1:C202_trans_enoyl_CoA() #C20 2-trans-enoyl-CoA
	Species C18car_ims_c3 @c3:C18car_ims() #C18car_ims
	Species C18car_ims_c1 @c1:C18car_ims() #C18car_ims
	Species C18Acyl_CoA_c1 @c1:C18Acyl_CoA() #C18Acyl-CoA
	Species C18L_3_hydroxyacyl_CoA_c1 @c1:C18L_3_hydroxyacyl_CoA() #C18 L-3-hydroxyacyl-CoA
	Species C18Ketoacyl_CoA_c1 @c1:C18Ketoacyl_CoA() #C18 Ketoacyl-CoA
	Species C18AcylCoA_cyt_default @default:C18AcylCoA_cyt() #C18 AcylCoA_cyt
	Species C182_trans_enoyl_CoA_c1 @c1:C182_trans_enoyl_CoA() #C18 2-trans-enoyl-CoA
	Species C16car_ims_c3 @c3:C16car_ims() #C16car_ims
	Species C16car_ims_c1 @c1:C16car_ims() #C16car_ims
	Species C16Acyl_CoA_c1 @c1:C16Acyl_CoA() #C16Acyl-CoA
	Species C16L_3_hydroxyacyl_CoA_c1 @c1:C16L_3_hydroxyacyl_CoA() #C16 L-3-hydroxyacyl-CoA
	Species C16Ketoacyl_CoA_c1 @c1:C16Ketoacyl_CoA() #C16 Ketoacyl-CoA
	Species C16AcylCoA_cyt_default @default:C16AcylCoA_cyt() #C16 AcylCoA_cyt
	Species C162_trans_enoyl_CoA_c1 @c1:C162_trans_enoyl_CoA() #C16 2-trans-enoyl-CoA
	Species C14car_ims_c3 @c3:C14car_ims() #C14car_ims
	Species C14car_ims_c1 @c1:C14car_ims() #C14car_ims
	Species C14Acyl_CoA_c1 @c1:C14Acyl_CoA() #C14Acyl-CoA
	Species C14L_3_hydroxyacyl_CoA_c1 @c1:C14L_3_hydroxyacyl_CoA() #C14 L-3-hydroxyacyl-CoA
	Species C14Ketoacyl_CoA_c1 @c1:C14Ketoacyl_CoA() #C14 Ketoacyl-CoA
	Species C14AcylCoA_cyt_default @default:C14AcylCoA_cyt() #C14 AcylCoA_cyt
	Species C142_trans_enoyl_CoA_c1 @c1:C142_trans_enoyl_CoA() #C14 2-trans-enoyl-CoA
	Species C12Acyl_CoA_c1 @c1:C12Acyl_CoA() #C12Acyl-CoA
	Species C12L_3_hydroxyacyl_CoA_c1 @c1:C12L_3_hydroxyacyl_CoA() #C12 L-3-hydroxyacyl-CoA
	Species C12Ketoacyl_CoA_c1 @c1:C12Ketoacyl_CoA() #C12 Ketoacyl-CoA
	Species C122_trans_enoyl_CoA_c1 @c1:C122_trans_enoyl_CoA() #C12 2-trans-enoyl-CoA
	Species C10Acyl_CoA_c1 @c1:C10Acyl_CoA() #C10Acyl-CoA
	Species C10L_3_hydroxyacyl_CoA_c1 @c1:C10L_3_hydroxyacyl_CoA() #C10 L-3-hydroxyacyl-CoA
	Species C10Ketoacyl_CoA_c1 @c1:C10Ketoacyl_CoA() #C10 Ketoacyl-CoA
	Species C102_trans_enoyl_CoA_c1 @c1:C102_trans_enoyl_CoA() #C10 2-trans-enoyl-CoA
	Species Aspartate_c1 @c1:Aspartate() #Aspartate
	Species Arginosuccinate_c1 @c1:Arginosuccinate() #Arginosuccinate
	Species Arginine_c1 @c1:Arginine() #Arginine
	Species Aminoacids_default @default:Aminoacids() #Amino acids
	Species Alpha_KG_c1 @c1:Alpha_KG() #Alpha-KG
	Species Alphaketoacid_default @default:Alphaketoacid() #Alpha keto acid
	Species AlphaKG_default @default:AlphaKG() #Alpha KG
	Species Alanine_default @default:Alanine() #Alanine
	Species AcetylCoA_c1 @c1:AcetylCoA() #AcetylCoA
	Species Acetone_c1 @c1:Acetone() #Acetone
	Species AcetoacetylCoA_c1 @c1:AcetoacetylCoA() #AcetoacetylCoA
	Species Acetoacetate_c1 @c1:Acetoacetate() #Acetoacetate
	Species ATP_default @default:ATP() #ATP
	Species ATP_c1 @c1:ATP() #ATP
	Species AMP_c1 @c1:AMP() #AMP
	Species ADP_default @default:ADP() #ADP
	Species ADP_c1 @c1:ADP() #ADP
	Species ACoA_c1 @c1:ACoA() #A CoA
	Species s6PGluconate_default @default:s6PGluconate() #6PGluconate
	Species s6PGDL_default @default:s6PGDL() #6PGDL
	Species s3_PGA_default @default:s3_PGA() #3-PGA
	Species s2e_c2 @c2:s2e() #2e
	Species s2NADH_default @default:s2NADH() #2NADH
	Species s2NADpl_default @default:s2NADpl() #2NAD+
	Species s2Hpl_c1 @c1:s2Hpl() #2H+
	Species s2Hpl_c3 @c3:s2Hpl() #2H+
	Species s2ATP_c1 @c1:s2ATP() #2ATP
	Species s2ADP_c1 @c1:s2ADP() #2ADP
	Species s2_PGA_default @default:s2_PGA() #2-PGA
	Species s1_2O2_c1 @c1:s1_2O2() #1/2O2
	Species s1_3_BiPGA_default @default:s1_3_BiPGA() #1,3-BiPGA
	Species Creatinephosphate_c1 @c1:Creatinephosphate() #Creatine phosphate
	Species Creatine_c4 @c4:Creatine() #Creatine
end observables
begin functions
	fRate65() = 1.0*Galactose1P_default/(Galactose1P_default + 0.069)
	fRate66() = 1.0*Glucose_default/(Glucose_default + 0.048)
	fRate67() = 1.0/(Glutamine_c1 + 0.04)
	fRate69() = 1.0*Succinate_c1/(Succinate_c1 + 875.0)
	fRate70() = 1.0*Fumarate_c1/(Fumarate_c1 + 0.013)
	fRate71() = 1.0*Malate_c1/(Malate_c1 + 0.00038)
	fRate72() = 1.0*F1_6P_default/(F1_6P_default + 1.3)
	fRate73() = 1.0/(GA3P_default + 13.6)
	fRate74() = 1.0*HCO3_plNH4pl_c1/(HCO3_plNH4pl_c1 + 13.0)
	fRate75() = 1.0/(s3_PGA_default + 0.1)
	fRate76() = 1.0*PEP_default/(PEP_default + 5.8)
	fRate77() = 1.0*ACoA_c1/(ACoA_c1 + 0.11)
	fRate78() = 1.0*Isocitrate_c1/(Isocitrate_c1 + 73.0)
	fRate79() = 1.0*Alpha_KG_c1/(Alpha_KG_c1 + 490.0)
	fRate80() = 1.0*SCoA_c1/(SCoA_c1 + 0.09)
	fRate81() = 1.0*G6P_default/(G6P_default + 2.0)
	fRate82() = 1.0/(G6P_default + 0.000213)
	fRate83() = 1.0*s1_3_BiPGA_default/(s1_3_BiPGA_default + 33.0)
	fRate84() = 1.0*s1_3_BiPGA_default/(s1_3_BiPGA_default + 300.0)
	fRate85() = 1.0/(s2_PGA_default + 300.0)
	fRate86() = 1.0*OXALOACETATE_default/(OXALOACETATE_default + 791.0)
	fRate87() = 1.0*Pyruvate_default/(Pyruvate_default + 0.11)
	fRate88() = 1.0*Pyruvate_default/(Pyruvate_default + 40.0)
	fRate104() = 1.0*G6P_default/(G6P_default + 0.04)
	fRate105() = 1.0*s6PGDL_default/(s6PGDL_default + 18.2)
	fRate106() = 1.0*s6PGluconate_default/(s6PGluconate_default + 0.157)
	fRate107() = 1.0/(D_Ribulose5P_default + 13.6)
	fRate108() = 1.0/(Ribose5P_default + 140.0)
	fRate109() = 1.0*G1P_default/(G1P_default + 0.066)
	fRate110() = 1.0*GA3P_default/(GA3P_default + 0.13)
	fRate111() = 1.0/(G6P_default + 0.045)
	fRate112() = 1.0/(Glycogen_default + 0.1)
	fRate113() = 1.0/(LimitDextrin_default + 0.08)
	fRate114() = 1.0*Unbranchedalpha__1_4__polymer_default/(Unbranchedalpha__1_4__polymer_default + 0.1)
	fRate115() = 1.0*Sucrose_default/(Sucrose_default + 10.0)
	fRate116() = 1.0*Fructose_default/(Fructose_default + 0.58)
	fRate117() = 1.0/(F1P_default + 1.7)
	fRate118() = 1.0*Glyceraldehyde_default/(Glyceraldehyde_default + 0.31)
	fRate119() = 1.0*Trehalose_default/(Trehalose_default + 1.37)
	fRate120() = 1.0*Galactose_default/(Galactose_default + 970.0)
	fRate121() = 1.0/(UDP_Glucose_default + 0.13)
	fRate122() = 1.0*AcetoacetylCoA_c1/(AcetoacetylCoA_c1 + 294.0)
	fRate123() = 1.0/(Acetoacetate_c1 + 1.28)
	fRate124() = 1.0*Acetoacetate_c1/(Acetoacetate_c1 + 12.6)
	fRate125() = 1.0*Acetoacetate_c1/(Acetoacetate_c1 + 18.7)
	fRate126() = 1.0/(GlycogenPrimer_default + 0.08)
	fRate127() = 1.0*Xylulose5P_default/(Xylulose5P_default + 0.19)
	fRate128() = 1.0*Xylulose5P_default/(Xylulose5P_default + 0.19)
	fRate129() = 1.0/(Citrate_c1 + 2900.0)
	fRate130() = 1.0*cis_Aconitate_c1/(cis_Aconitate_c1 + 2900.0)
	fRate131() = 1.0*C22Ketoacyl_CoA_c1/(C22Ketoacyl_CoA_c1 + 16.0)
	fRate132() = 1.0*C20Ketoacyl_CoA_c1/(C20Ketoacyl_CoA_c1 + 16.0)
	fRate133() = 1.0*C18Ketoacyl_CoA_c1/(C18Ketoacyl_CoA_c1 + 16.0)
	fRate134() = 1.0*C16Ketoacyl_CoA_c1/(C16Ketoacyl_CoA_c1 + 16.0)
	fRate135() = 1.0*C14Ketoacyl_CoA_c1/(C14Ketoacyl_CoA_c1 + 34.5)
	fRate136() = 1.0*C12Ketoacyl_CoA_c1/(C12Ketoacyl_CoA_c1 + 16.0)
	fRate137() = 1.0*C10Ketoacyl_CoA_c1/(C10Ketoacyl_CoA_c1 + 16.0)
	fRate138() = 1.0*C8Ketoacyl_CoA_c1/(C8Ketoacyl_CoA_c1 + 16.0)
	fRate139() = 1.0*C6Ketoacyl_CoA_c1/(C6Ketoacyl_CoA_c1 + 16.0)
	fRate140() = 1.0/(ACoA_c1 + 16.0)
	fRate141() = 1.0*AcetoacetylCoA_c1/(AcetoacetylCoA_c1 + 100.0)
	fRate142() = 1.0*C4Ketoacyl_CoA_c1/(C4Ketoacyl_CoA_c1 + 16.0)
	fRate143() = 1.0*C22Acyl_CoA_c1/(C22Acyl_CoA_c1 + 3.0)
	fRate144() = 1.0*C20Acyl_CoA_c1/(C20Acyl_CoA_c1 + 3.0)
	fRate145() = 1.0*C18Acyl_CoA_c1/(C18Acyl_CoA_c1 + 3.0)
	fRate146() = 1.0*C16Acyl_CoA_c1/(C16Acyl_CoA_c1 + 3.0)
	fRate147() = 1.0*C14Acyl_CoA_c1/(C14Acyl_CoA_c1 + 3.0)
	fRate148() = 1.0*C12Acyl_CoA_c1/(C12Acyl_CoA_c1 + 3.0)
	fRate149() = 1.0*C10Acyl_CoA_c1/(C10Acyl_CoA_c1 + 3.0)
	fRate150() = 1.0*C8Acyl_CoA_c1/(C8Acyl_CoA_c1 + 3.0)
	fRate151() = 1.0*C6Acyl_CoA_c1/(C6Acyl_CoA_c1 + 3.0)
	fRate152() = 1.0*C4Acyl_CoA_c1/(C4Acyl_CoA_c1 + 3.0)
	fRate153() = 1.0*C222_trans_enoyl_CoA_c1/(C222_trans_enoyl_CoA_c1 + 100.0)
	fRate154() = 1.0*C202_trans_enoyl_CoA_c1/(C202_trans_enoyl_CoA_c1 + 100.0)
	fRate155() = 1.0*C182_trans_enoyl_CoA_c1/(C182_trans_enoyl_CoA_c1 + 100.0)
	fRate156() = 1.0*C162_trans_enoyl_CoA_c1/(C162_trans_enoyl_CoA_c1 + 100.0)
	fRate157() = 1.0*C142_trans_enoyl_CoA_c1/(C142_trans_enoyl_CoA_c1 + 100.0)
	fRate158() = 1.0*C122_trans_enoyl_CoA_c1/(C122_trans_enoyl_CoA_c1 + 100.0)
	fRate159() = 1.0*C102_trans_enoyl_CoA_c1/(C102_trans_enoyl_CoA_c1 + 100.0)
	fRate160() = 1.0*C82_trans_enoyl_CoA_c1/(C82_trans_enoyl_CoA_c1 + 100.0)
	fRate161() = 1.0*C62_trans_enoyl_CoA_c1/(C62_trans_enoyl_CoA_c1 + 100.0)
	fRate162() = 1.0*C42_trans_enoyl_CoA_c1/(C42_trans_enoyl_CoA_c1 + 100.0)
	fRate163() = 1.0*C22L_3_hydroxyacyl_CoA_c1/(C22L_3_hydroxyacyl_CoA_c1 + 34.5)
	fRate164() = 1.0*C20L_3_hydroxyacyl_CoA_c1/(C20L_3_hydroxyacyl_CoA_c1 + 34.5)
	fRate165() = 1.0*C18L_3_hydroxyacyl_CoA_c1/(C18L_3_hydroxyacyl_CoA_c1 + 34.5)
	fRate166() = 1.0*C16L_3_hydroxyacyl_CoA_c1/(C16L_3_hydroxyacyl_CoA_c1 + 34.5)
	fRate167() = 1.0*C14L_3_hydroxyacyl_CoA_c1/(C14L_3_hydroxyacyl_CoA_c1 + 34.5)
	fRate168() = 1.0*C12L_3_hydroxyacyl_CoA_c1/(C12L_3_hydroxyacyl_CoA_c1 + 34.5)
	fRate169() = 1.0*C10L_3_hydroxyacyl_CoA_c1/(C10L_3_hydroxyacyl_CoA_c1 + 34.5)
	fRate170() = 1.0*C8L_3_hydroxyacyl_CoA_c1/(C8L_3_hydroxyacyl_CoA_c1 + 34.5)
	fRate171() = 1.0*C6L_3_hydroxyacyl_CoA_c1/(C6L_3_hydroxyacyl_CoA_c1 + 34.5)
	fRate172() = 1.0*C4L_3_hydroxyacyl_CoA_c1/(C4L_3_hydroxyacyl_CoA_c1 + 34.5)
	fRate173() = 1.0*Creatinephosphate_c1/(Creatinephosphate_c1 + 1.16)
	fRate174() = 1.0/(Creatine_c4 + 9.6)
end functions
begin reaction rules
	re99: Pyruvate()@default -> Alanine()@default r1_k1 #Modifiers(s11)
	re7: Glutamine()@c1 -> HCO3_plNH4pl()@c1 r2_k1 #Modifiers(s340)
	re8: Glutamate()@c1 -> HCO3_plNH4pl()@c1 r3_k1 #Modifiers(s341)
	re14: Arginine()@c1 -> Ornithine()@c1 r4_k1 #Modifiers(s343)
	re37: F1_6P()@default -> GA3P()@default r5_k1 #Modifiers(s73)
	re11: Citrulline()@c1 + ATP()@c1 -> CitrullylAMPintermediate()@c1 + ADP()@c1 r6_k1 #Modifiers(s342, s345)
	re12: CitrullylAMPintermediate()@c1 + Aspartate()@c1 + ATP()@c1 -> Arginosuccinate()@c1 + AMP()@c1 + PPi()@c1 r7_k1 #Modifiers(s38, s23, s345)
	re81: Glyceraldehyde()@default -> Glycerol3P()@default r8_k1 #Modifiers(s293)
	re85: Lactate()@default + NADH()@default -> Glucose()@default + NADpl()@default r9_k1 #Modifiers(s296, s67)
	re27: F6P()@default + ATP()@default -> F1_6P()@default + ADP()@default r10_k1 #Modifiers(s3, s63)
	re36: s3_PGA()@default + ATP()@default -> s1_3_BiPGA()@default + ADP()@default r11_k1 #Modifiers(s8, s63)
	re40: GA3P()@default + Pi()@default + NADpl()@default -> s1_3_BiPGA()@default + NADH()@default + Hpl()@default r12_k1 #Modifiers(s35, s44, s93)
	re38: F1_6P()@default -> DHAP()@default r13_k1 #Modifiers(s73)
	re49: UDP_Glucose()@default -> GlycogenPrimer()@default r14_k1 #Modifiers(s335)
	re68: CyC()@c2 -> Cya_a3()@c2 r15_k1 #Modifiers(s262)
	re70: s1_2O2()@c1 -> Cya_a3()@c2 r16_k1 #Modifiers(s256)
	re71: H2O()@c1 -> Cya_a3()@c2 r17_k1 #Modifiers(s347)
	re76: s2Hpl()@c1 -> Cya_a3()@c2 r18_k1 #Modifiers(s358)
	re63: FeS()@c1 -> s2e()@c2 r19_k1 #Modifiers(s374)
	re75: s2Hpl()@c1 -> s2e()@c2 r20_k1 #Modifiers(s358)
	re67: CyC2()@c2 -> CyC()@c2 r21_k1 #Modifiers(s263)
	re65: QH2()@c2 -> CyC2()@c2 r22_k1 #Modifiers(s388)
	re61: QH2()@c2 -> Cyb()@c2 r23_k1 #Modifiers(s388)
	re69: s2Hpl()@c1 -> Q()@c2 r24_k1 #Modifiers(s358)
	re59: FeS()@c2 + FADH2()@c1 -> Q()@c2 + FAD()@c1 r25_k1 #Modifiers(s377, s353)
	re77: NADH_s381()@c1 -> FMN()@c2 r26_k1 #Modifiers(s381)
	re82: Glycerol3P()@default + FA()@default -> Triglyceride()@default r27_k1 #Modifiers(s51, s53)
	re86: Pyruvate()@default -> Lactate()@default r28_k1 #Modifiers(s11)
	re90: Lactose()@default -> Galactose()@default + Glucose()@default r29_k1 #Modifiers(s307)
	re93: HMGCoA()@c1 -> Acetoacetate()@c1 + ACoA()@c1 r30_k1 #Modifiers(s322)
	re1: Glutamine()@default -> Glutamine()@c1 r31_k2 #Modifiers(s378)
	re10: Citrulline()@c1 -> Citrulline()@c1 r32_k1 #Modifiers(s342)
	re9: Ornithine()@c1 + Carbamoylphosphate()@c1 -> Citrulline()@c1 + Pi()@c1 r33_k1 #Modifiers(s34, s33)
	re24: Arginosuccinate()@c1 -> Arginine()@c1 + Fumarate()@c1 r34_k1 #Modifiers(s39)
	re13: Arginine()@c1 + H2O()@c1 -> Arginine()@c1 + UREA()@c1 r35_k1 #Modifiers(s343, s347)
	re150: C22Ketoacyl_CoA()@c1 -> ACoA()@c1 r36_k1 #Modifiers(s37)
	re151: C20Ketoacyl_CoA()@c1 -> ACoA()@c1 r37_k1 #Modifiers(s66)
	re152: C6Ketoacyl_CoA()@c1 -> ACoA()@c1 r38_k1 #Modifiers(s116)
	re153: C18Ketoacyl_CoA()@c1 -> ACoA()@c1 r39_k1 #Modifiers(s80)
	re154: C8Ketoacyl_CoA()@c1 -> ACoA()@c1 r40_k1 #Modifiers(s111)
	re155: C10Ketoacyl_CoA()@c1 -> ACoA()@c1 r41_k1 #Modifiers(s108)
	re156: C16Ketoacyl_CoA()@c1 -> ACoA()@c1 r42_k1 #Modifiers(s89)
	re157: C14Ketoacyl_CoA()@c1 -> ACoA()@c1 r43_k1 #Modifiers(s100)
	re158: C12Ketoacyl_CoA()@c1 -> ACoA()@c1 r44_k1 #Modifiers(s103)
	re100: FADH2()@c1 -> FADH2()@c1 r45_k1 #Modifiers(s353)
	re78: FMN()@c2 -> NADpl()@c1 r46_k1 #Modifiers(s269)
	re104: NADpl()@c1 -> NADpl()@c1 r47_k1 #Modifiers(s355)
	re105: NADpl()@c1 -> NADpl()@c1 r48_k1 #Modifiers(s355)
	re106: NADpl()@c1 -> NADpl()@c1 r49_k1 #Modifiers(s355)
	re108: NADpl()@c1 -> NADpl()@c1 r50_k1 #Modifiers(s355)
	re107: FAD()@c1 -> FAD()@c1 r51_k1 #Modifiers(s356)
	re62: Cyb()@c2 -> FeS()@c1 r52_k1 #Modifiers(s265)
	re58: FMN()@c2 -> FeS()@c2 r53_k1 #Modifiers(s269)
	re66: FeS()@c2 -> FeS()@c2 r54_k1 #Modifiers(s377)
	re5: Alanine()@default + AlphaKG()@default -> Glutamate()@default + Alphaketoacid()@default r55_k1 #Modifiers(s14, s21)
	re2: Aminoacids()@default + Alphaketoacid()@default -> Glutamate()@default + AlphaKG()@default r56_k1 #Modifiers(s12, s17)
	re101: NADH_s351()@c1 -> NADH_s381()@c1 r57_k1 #Modifiers(s351)
	re102: NADH_s351()@c1 -> NADH_s381()@c1 r58_k1 #Modifiers(s351)
	re103: NADH_s351()@c1 -> NADH_s381()@c1 r59_k1 #Modifiers(s351)
	re109: NADH_s351()@c1 -> NADH_s381()@c1 r60_k1 #Modifiers(s351)
	re60: Q()@c2 -> QH2()@c2 r61_k1 #Modifiers(s267)
	re64: s2e()@c2 -> QH2()@c2 r62_k1 #Modifiers(s259)
	re72: FMN()@c2 -> s2Hpl()@c3 r63_k1 #Modifiers(s269)
	re73: QH2()@c2 -> s2Hpl()@c3 r64_k1 #Modifiers(s388)
	re74: QH2()@c2 -> s2Hpl()@c3 r65_k1 #Modifiers(s388)
	re89_reactants_0: 0  -> Galactose1P()@default -1*(fRate65()) #Modifiers(s13, s302)
	re89_reactants_1: 0  -> s2NADpl()@default -1*(fRate65()) #Modifiers(s13, s302)
	re89_products_0: 0  -> UDP_Glucose()@default fRate65() #Modifiers(s13, s302)
	re89_products_1: 0  -> s2NADH()@default fRate65() #Modifiers(s13, s302)
	re89_products_2: 0  -> Hpl()@default fRate65() #Modifiers(s13, s302)
	re25_reactants_0: 0  -> Glucose()@default -1*(fRate66()) #Modifiers(s16, s71)
	re25_reactants_1: 0  -> ATP()@default -1*(fRate66()) #Modifiers(s16, s71)
	re25_products_0: 0  -> G6P()@default fRate66() #Modifiers(s16, s71)
	re25_products_1: 0  -> ADP()@default fRate66() #Modifiers(s16, s71)
	re4: Glutamine()@c1 -> Glutamate()@c1 fRate67() #Modifiers(s18, s340)
	re3: Glutamate()@default + OAA()@c1 -> Glutamate()@c1 + Aspartate()@c1 r69_k1 #Modifiers(s24, s379, s50)
	re20_reactants_0: 0  -> Succinate()@c1 -1*(fRate69()) #Modifiers(s26, s7)
	re20_reactants_1: 0  -> FAD()@c1 -1*(fRate69()) #Modifiers(s26, s7)
	re20_products_0: 0  -> Fumarate()@c1 fRate69() #Modifiers(s26, s7)
	re20_products_1: 0  -> FADH2()@c1 fRate69() #Modifiers(s26, s7)
	re21_reactants_0: 0  -> Fumarate()@c1 -1*(fRate70()) #Modifiers(s27, s40)
	re21_reactants_1: 0  -> H2O()@c1 -1*(fRate70()) #Modifiers(s27, s40)
	re21_products_0: 0  -> Malate()@c1 fRate70() #Modifiers(s27, s40)
	re22_reactants_0: 0  -> Malate()@c1 -1*(fRate71()) #Modifiers(s28, s9)
	re22_reactants_1: 0  -> NADpl()@c1 -1*(fRate71()) #Modifiers(s28, s9)
	re22_products_0: 0  -> OAA()@c1 fRate71() #Modifiers(s28, s9)
	re22_products_1: 0  -> NADH_s351()@c1 fRate71() #Modifiers(s28, s9)
	re22_products_2: 0  -> Hpl()@c1 fRate71() #Modifiers(s28, s9)
	re33_reactants_0: 0  -> F1_6P()@default -1*(fRate72()) #Modifiers(s31, s73)
	re33_reactants_1: 0  -> H2O()@default -1*(fRate72()) #Modifiers(s31, s73)
	re33_products_0: 0  -> F6P()@default fRate72() #Modifiers(s31, s73)
	re33_products_1: 0  -> Pi()@default fRate72() #Modifiers(s31, s73)
	re39: GA3P()@default -> DHAP()@default fRate73() #Modifiers(s36, s35)
	re6_reactants_0: 0  -> HCO3_plNH4pl()@c1 -1*(fRate74()) #Modifiers(s41, s25)
	re6_reactants_1: 0  -> s2ATP()@c1 -1*(fRate74()) #Modifiers(s41, s25)
	re6_products_0: 0  -> Carbamoylphosphate()@c1 fRate74() #Modifiers(s41, s25)
	re6_products_1: 0  -> s2ADP()@c1 fRate74() #Modifiers(s41, s25)
	re29: s3_PGA()@default -> s2_PGA()@default fRate75() #Modifiers(s43, s8)
	re31_reactants_0: 0  -> PEP()@default -1*(fRate76()) #Modifiers(s45, s10)
	re31_reactants_1: 0  -> ADP()@default -1*(fRate76()) #Modifiers(s45, s10)
	re31_products_0: 0  -> Pyruvate()@default fRate76() #Modifiers(s45, s10)
	re31_products_1: 0  -> ATP()@default fRate76() #Modifiers(s45, s10)
	re15_reactants_0: 0  -> ACoA()@c1 -1*(fRate77()) #Modifiers(s54, s348)
	re15_reactants_1: 0  -> CO2()@c1 -1*(fRate77()) #Modifiers(s54, s348)
	re15_reactants_2: 0  -> OAA()@c1 -1*(fRate77()) #Modifiers(s54, s348)
	re15_reactants_3: 0  -> H2O()@c1 -1*(fRate77()) #Modifiers(s54, s348)
	re15_products_0: 0  -> Citrate()@c1 fRate77() #Modifiers(s54, s348)
	re15_products_1: 0  -> CoA_SH()@c1 fRate77() #Modifiers(s54, s348)
	re23_reactants_0: 0  -> Isocitrate()@c1 -1*(fRate78()) #Modifiers(s56, s52)
	re23_reactants_1: 0  -> NADpl()@c1 -1*(fRate78()) #Modifiers(s56, s52)
	re23_products_0: 0  -> Alpha_KG()@c1 fRate78() #Modifiers(s56, s52)
	re23_products_1: 0  -> CO2()@c1 fRate78() #Modifiers(s56, s52)
	re23_products_2: 0  -> NADH_s351()@c1 fRate78() #Modifiers(s56, s52)
	re23_products_3: 0  -> Hpl()@c1 fRate78() #Modifiers(s56, s52)
	re18_reactants_0: 0  -> Alpha_KG()@c1 -1*(fRate79()) #Modifiers(s57, s5)
	re18_reactants_1: 0  -> CoA_SH()@c1 -1*(fRate79()) #Modifiers(s57, s5)
	re18_reactants_2: 0  -> NADpl()@c1 -1*(fRate79()) #Modifiers(s57, s5)
	re18_products_0: 0  -> SCoA()@c1 fRate79() #Modifiers(s57, s5)
	re18_products_1: 0  -> CO2()@c1 fRate79() #Modifiers(s57, s5)
	re18_products_2: 0  -> NADH_s351()@c1 fRate79() #Modifiers(s57, s5)
	re18_products_3: 0  -> Hpl()@c1 fRate79() #Modifiers(s57, s5)
	re19_reactants_0: 0  -> SCoA()@c1 -1*(fRate80()) #Modifiers(s58, s6)
	re19_reactants_1: 0  -> GDP()@c1 -1*(fRate80()) #Modifiers(s58, s6)
	re19_products_0: 0  -> Succinate()@c1 fRate80() #Modifiers(s58, s6)
	re19_products_1: 0  -> ATP()@c1 fRate80() #Modifiers(s58, s6)
	re19_products_2: 0  -> CoA_SH()@c1 fRate80() #Modifiers(s58, s6)
	re32_reactants_0: 0  -> G6P()@default -1*(fRate81()) #Modifiers(s77, s234)
	re32_reactants_1: 0  -> H20()@default -1*(fRate81()) #Modifiers(s77, s234)
	re32_products_0: 0  -> Glucose()@default fRate81() #Modifiers(s77, s234)
	re32_products_1: 0  -> Pi()@default fRate81() #Modifiers(s77, s234)
	re26: G6P()@default -> F6P()@default fRate82() #Modifiers(s79, s234)
	re41_reactants_0: 0  -> s1_3_BiPGA()@default -1*(fRate83()) #Modifiers(s85, s74)
	re41_reactants_1: 0  -> NADH()@default -1*(fRate83()) #Modifiers(s85, s74)
	re41_reactants_2: 0  -> Hpl()@default -1*(fRate83()) #Modifiers(s85, s74)
	re41_products_0: 0  -> GA3P()@default fRate83() #Modifiers(s85, s74)
	re41_products_1: 0  -> Pi()@default fRate83() #Modifiers(s85, s74)
	re41_products_2: 0  -> NADpl()@default fRate83() #Modifiers(s85, s74)
	re28_reactants_0: 0  -> s1_3_BiPGA()@default -1*(fRate84()) #Modifiers(s86, s333, s74)
	re28_reactants_1: 0  -> ADP()@default -1*(fRate84()) #Modifiers(s86, s333, s74)
	re28_products_0: 0  -> s3_PGA()@default fRate84() #Modifiers(s86, s333, s74)
	re28_products_1: 0  -> ATP()@default fRate84() #Modifiers(s86, s333, s74)
	re30: s2_PGA()@default -> PEP()@default fRate85() #Modifiers(s87, s75)
	re35_reactants_0: 0  -> OXALOACETATE()@default -1*(fRate86()) #Modifiers(s88, s81)
	re35_reactants_1: 0  -> GDP()@default -1*(fRate86()) #Modifiers(s88, s81)
	re35_products_0: 0  -> PEP()@default fRate86() #Modifiers(s88, s81)
	re35_products_1: 0  -> GTP()@default fRate86() #Modifiers(s88, s81)
	re34_reactants_0: 0  -> Pyruvate()@default -1*(fRate87()) #Modifiers(s90, s11)
	re34_reactants_1: 0  -> ATP()@default -1*(fRate87()) #Modifiers(s90, s11)
	re34_products_0: 0  -> OXALOACETATE()@default fRate87() #Modifiers(s90, s11)
	re34_products_1: 0  -> ADP()@default fRate87() #Modifiers(s90, s11)
	re42_reactants_0: 0  -> Pyruvate()@default -1*(fRate88()) #Modifiers(s91, s357, s11)
	re42_reactants_1: 0  -> TPP()@c1 -1*(fRate88()) #Modifiers(s91, s357, s11)
	re42_reactants_2: 0  -> Co_Ash()@c1 -1*(fRate88()) #Modifiers(s91, s357, s11)
	re42_reactants_3: 0  -> NADpl()@c1 -1*(fRate88()) #Modifiers(s91, s357, s11)
	re42_reactants_4: 0  -> FAD()@c1 -1*(fRate88()) #Modifiers(s91, s357, s11)
	re42_reactants_5: 0  -> LIPOATE()@c1 -1*(fRate88()) #Modifiers(s91, s357, s11)
	re42_products_0: 0  -> ACoA()@c1 fRate88() #Modifiers(s91, s357, s11)
	re42_products_1: 0  -> NADH_s351()@c1 fRate88() #Modifiers(s91, s357, s11)
	re42_products_2: 0  -> Hpl()@c1 fRate88() #Modifiers(s91, s357, s11)
	re164: C22car_ims()@c3 -> C22car_ims()@c1 r90_k1 #Modifiers(s122, s127)
	re168: C14car_ims()@c3 -> C14car_ims()@c1 r91_k1 #Modifiers(s122, s135)
	re167: C16car_ims()@c3 -> C16car_ims()@c1 r92_k1 #Modifiers(s122, s133)
	re166: C18car_ims()@c3 -> C18car_ims()@c1 r93_k1 #Modifiers(s122, s131)
	re165: C20car_ims()@c3 -> C20car_ims()@c1 r94_k1 #Modifiers(s122, s129)
	re159: C22AcylCoA_cyt()@default + Carnitine_cyt()@default -> C22car_ims()@c3 + CoA_SH()@default r95_k1 #Modifiers(s123, s125, s126)
	re160: C20AcylCoA_cyt()@default + Carnitine_cyt()@default -> C20car_ims()@c3 + CoA_SH()@default r96_k1 #Modifiers(s123, s128, s126)
	re161: C18AcylCoA_cyt()@default + Carnitine_cyt()@default -> C18car_ims()@c3 + CoA_SH()@default r97_k1 #Modifiers(s123, s130, s126)
	re162: C16AcylCoA_cyt()@default + Carnitine_cyt()@default -> C16car_ims()@c3 + CoA_SH()@default r98_k1 #Modifiers(s123, s132, s126)
	re163: C14AcylCoA_cyt()@default + Carnitine_cyt()@default -> C14car_ims()@c3 + CoA_SH()@default r99_k1 #Modifiers(s123, s134, s126)
	re169: C22car_ims()@c1 -> C22Acyl_CoA()@c1 + car_mat()@c1 r100_k1 #Modifiers(s124, s367)
	re170: C20car_ims()@c1 -> C20Acyl_CoA()@c1 + car_mat()@c1 r101_k1 #Modifiers(s124, s371)
	re171: C18car_ims()@c1 -> C18Acyl_CoA()@c1 + car_mat()@c1 r102_k1 #Modifiers(s124, s370)
	re172: C16car_ims()@c1 -> C16Acyl_CoA()@c1 + car_mat()@c1 r103_k1 #Modifiers(s124, s369)
	re173: C14car_ims()@c1 -> C14Acyl_CoA()@c1 + car_mat()@c1 r104_k1 #Modifiers(s124, s368)
	re43_reactants_0: 0  -> G6P()@default -1*(fRate104()) #Modifiers(s186, s333, s234)
	re43_reactants_1: 0  -> NADPpl()@default -1*(fRate104()) #Modifiers(s186, s333, s234)
	re43_products_0: 0  -> s6PGDL()@default fRate104() #Modifiers(s186, s333, s234)
	re43_products_1: 0  -> NADPH()@default fRate104() #Modifiers(s186, s333, s234)
	re44_reactants_0: 0  -> s6PGDL()@default -1*(fRate105()) #Modifiers(s189, s333, s181)
	re44_reactants_1: 0  -> H2O()@default -1*(fRate105()) #Modifiers(s189, s333, s181)
	re44_products_0: 0  -> s6PGluconate()@default fRate105() #Modifiers(s189, s333, s181)
	re45_reactants_0: 0  -> s6PGluconate()@default -1*(fRate106()) #Modifiers(s192, s182)
	re45_reactants_1: 0  -> NADPpl()@default -1*(fRate106()) #Modifiers(s192, s182)
	re45_products_0: 0  -> D_Ribulose5P()@default fRate106() #Modifiers(s192, s182)
	re45_products_1: 0  -> NAPDH()@default fRate106() #Modifiers(s192, s182)
	re45_products_2: 0  -> Hpl()@default fRate106() #Modifiers(s192, s182)
	re45_products_3: 0  -> CO2()@default fRate106() #Modifiers(s192, s182)
	re46: D_Ribulose5P()@default -> Ribose5P()@default fRate107() #Modifiers(s193, s183)
	re47: Ribose5P()@default -> Xylulose5P()@default fRate108() #Modifiers(s194, s187)
	re48_reactants_0: 0  -> G1P()@default -1*(fRate109()) #Modifiers(s201, s195)
	re48_reactants_1: 0  -> UDP()@default -1*(fRate109()) #Modifiers(s201, s195)
	re48_products_0: 0  -> UDP_Glucose()@default fRate109() #Modifiers(s201, s195)
	re48_products_1: 0  -> PPi()@default fRate109() #Modifiers(s201, s195)
	re53_reactants_0: 0  -> GA3P()@default -1*(fRate110()) #Modifiers(s248, s35)
	re53_reactants_1: 0  -> Sedoheptulase7P()@default -1*(fRate110()) #Modifiers(s248, s35)
	re53_products_0: 0  -> F6P()@default fRate110() #Modifiers(s248, s35)
	re53_products_1: 0  -> Erythrose4P()@default fRate110() #Modifiers(s248, s35)
	re54: G6P()@default -> G1P()@default fRate111() #Modifiers(s249, s234)
	re55: Glycogen()@default -> G1P()@default + LimitDextrin()@default fRate112() #Modifiers(s251, s198)
	re56: LimitDextrin()@default -> Unbranchedalpha__1_4__polymer()@default + Glucose()@default fRate113() #Modifiers(s254, s252)
	re57_reactants_0: 0  -> Unbranchedalpha__1_4__polymer()@default -1*(fRate114()) #Modifiers(s255, s253)
	re57_reactants_1: 0  -> ATP()@default -1*(fRate114()) #Modifiers(s255, s253)
	re57_products_0: 0  -> G1P()@default fRate114() #Modifiers(s255, s253)
	re57_products_1: 0  -> ADP()@default fRate114() #Modifiers(s255, s253)
	re80_reactants_0: 0  -> Sucrose()@default -1*(fRate115()) #Modifiers(s283, s284)
	re80_reactants_1: 0  -> H2O()@default -1*(fRate115()) #Modifiers(s283, s284)
	re80_products_0: 0  -> Glucose()@default fRate115() #Modifiers(s283, s284)
	re80_products_1: 0  -> Fructose()@default fRate115() #Modifiers(s283, s284)
	re79_reactants_0: 0  -> Fructose()@default -1*(fRate116()) #Modifiers(s287, s286)
	re79_reactants_1: 0  -> ATP()@default -1*(fRate116()) #Modifiers(s287, s286)
	re79_products_0: 0  -> F1P()@default fRate116() #Modifiers(s287, s286)
	re79_products_1: 0  -> ADP()@default fRate116() #Modifiers(s287, s286)
	re83: F1P()@default -> DHAP()@default + Glyceraldehyde()@default fRate117() #Modifiers(s291, s285)
	re84_reactants_0: 0  -> Glyceraldehyde()@default -1*(fRate118()) #Modifiers(s294, s293)
	re84_reactants_1: 0  -> ATP()@default -1*(fRate118()) #Modifiers(s294, s293)
	re84_products_0: 0  -> GA3P()@default fRate118() #Modifiers(s294, s293)
	re84_products_1: 0  -> ADP()@default fRate118() #Modifiers(s294, s293)
	re87_reactants_0: 0  -> Trehalose()@default -1*(fRate119()) #Modifiers(s298, s297)
	re87_reactants_1: 0  -> H2O()@default -1*(fRate119()) #Modifiers(s298, s297)
	re87_products_0: 0  -> Glucose()@default fRate119() #Modifiers(s298, s297)
	re88_reactants_0: 0  -> Galactose()@default -1*(fRate120()) #Modifiers(s305, s333, s306)
	re88_reactants_1: 0  -> ATP()@default -1*(fRate120()) #Modifiers(s305, s333, s306)
	re88_products_0: 0  -> Galactose1P()@default fRate120() #Modifiers(s305, s333, s306)
	re88_products_1: 0  -> ADP()@default fRate120() #Modifiers(s305, s333, s306)
	re91: UDP_Glucose()@default -> G1P()@default fRate121() #Modifiers(s308, s335)
	re92_reactants_0: 0  -> AcetoacetylCoA()@c1 -1*(fRate122()) #Modifiers(s327, s321)
	re92_reactants_1: 0  -> AcetylCoA()@c1 -1*(fRate122()) #Modifiers(s327, s321)
	re92_reactants_2: 0  -> H2O()@c1 -1*(fRate122()) #Modifiers(s327, s321)
	re92_products_0: 0  -> HMGCoA()@c1 fRate122() #Modifiers(s327, s321)
	re92_products_1: 0  -> CoA_SH()@c1 fRate122() #Modifiers(s327, s321)
	re94: Acetoacetate()@c1 -> Acetone()@c1 + CO2()@c1 fRate123() #Modifiers(s328, s323)
	re95_reactants_0: 0  -> Acetoacetate()@c1 -1*(fRate124()) #Modifiers(s330, s323)
	re95_reactants_1: 0  -> NADH_s351()@c1 -1*(fRate124()) #Modifiers(s330, s323)
	re95_reactants_2: 0  -> Hpl()@c1 -1*(fRate124()) #Modifiers(s330, s323)
	re95_products_0: 0  -> D_Beta_Hydroxybutyrate()@c1 fRate124() #Modifiers(s330, s323)
	re95_products_1: 0  -> NADpl()@c1 fRate124() #Modifiers(s330, s323)
	re98_reactants_0: 0  -> Acetoacetate()@c1 -1*(fRate125()) #Modifiers(s332, s323)
	re98_reactants_1: 0  -> SCoA()@c1 -1*(fRate125()) #Modifiers(s332, s323)
	re98_products_0: 0  -> AcetoacetylCoA()@c1 fRate125() #Modifiers(s332, s323)
	re98_products_1: 0  -> Succinate()@c1 fRate125() #Modifiers(s332, s323)
	re50: GlycogenPrimer()@default -> Glycogen()@default fRate126() #Modifiers(s336, s203, s336, s250, s197)
	re52_reactants_0: 0  -> Xylulose5P()@default -1*(fRate127()) #Modifiers(s337, s188)
	re52_reactants_1: 0  -> Erythrose4P()@default -1*(fRate127()) #Modifiers(s337, s188)
	re52_products_0: 0  -> F6P()@default fRate127() #Modifiers(s337, s188)
	re52_products_1: 0  -> GA3P()@default fRate127() #Modifiers(s337, s188)
	re51_reactants_0: 0  -> Xylulose5P()@default -1*(fRate128()) #Modifiers(s337, s188)
	re51_reactants_1: 0  -> Ribose5P()@default -1*(fRate128()) #Modifiers(s337, s188)
	re51_products_0: 0  -> GA3P()@default fRate128() #Modifiers(s337, s188)
	re51_products_1: 0  -> Sedoheptulase7P()@default fRate128() #Modifiers(s337, s188)
	re16: Citrate()@c1 -> cis_Aconitate()@c1 + H2O()@c1 fRate129() #Modifiers(s354, s2)
	re17_reactants_0: 0  -> cis_Aconitate()@c1 -1*(fRate130()) #Modifiers(s354, s4)
	re17_reactants_1: 0  -> H2O()@c1 -1*(fRate130()) #Modifiers(s354, s4)
	re17_products_0: 0  -> Isocitrate()@c1 fRate130() #Modifiers(s354, s4)
	re113_reactants_0: 0  -> C22Ketoacyl_CoA()@c1 -1*(fRate131()) #Modifiers(s362, s37)
	re113_reactants_1: 0  -> CoA_SH()@c1 -1*(fRate131()) #Modifiers(s362, s37)
	re113_products_0: 0  -> C20Acyl_CoA()@c1 fRate131() #Modifiers(s362, s37)
	re116_reactants_0: 0  -> C20Ketoacyl_CoA()@c1 -1*(fRate132()) #Modifiers(s362, s66)
	re116_reactants_1: 0  -> CoA_SH()@c1 -1*(fRate132()) #Modifiers(s362, s66)
	re116_products_0: 0  -> C18Acyl_CoA()@c1 fRate132() #Modifiers(s362, s66)
	re120_reactants_0: 0  -> C18Ketoacyl_CoA()@c1 -1*(fRate133()) #Modifiers(s362, s80)
	re120_reactants_1: 0  -> CoA_SH()@c1 -1*(fRate133()) #Modifiers(s362, s80)
	re120_products_0: 0  -> C16Acyl_CoA()@c1 fRate133() #Modifiers(s362, s80)
	re123_reactants_0: 0  -> C16Ketoacyl_CoA()@c1 -1*(fRate134()) #Modifiers(s362, s89)
	re123_reactants_1: 0  -> CoA_SH()@c1 -1*(fRate134()) #Modifiers(s362, s89)
	re123_products_0: 0  -> C14Acyl_CoA()@c1 fRate134() #Modifiers(s362, s89)
	re128_reactants_0: 0  -> C14Ketoacyl_CoA()@c1 -1*(fRate135()) #Modifiers(s362, s100)
	re128_reactants_1: 0  -> CoA_SH()@c1 -1*(fRate135()) #Modifiers(s362, s100)
	re128_products_0: 0  -> C12Acyl_CoA()@c1 fRate135() #Modifiers(s362, s100)
	re131_reactants_0: 0  -> C12Ketoacyl_CoA()@c1 -1*(fRate136()) #Modifiers(s362, s103)
	re131_reactants_1: 0  -> CoA_SH()@c1 -1*(fRate136()) #Modifiers(s362, s103)
	re131_products_0: 0  -> C10Acyl_CoA()@c1 fRate136() #Modifiers(s362, s103)
	re135_reactants_0: 0  -> C10Ketoacyl_CoA()@c1 -1*(fRate137()) #Modifiers(s362, s108)
	re135_reactants_1: 0  -> CoA_SH()@c1 -1*(fRate137()) #Modifiers(s362, s108)
	re135_products_0: 0  -> C8Acyl_CoA()@c1 fRate137() #Modifiers(s362, s108)
	re138_reactants_0: 0  -> C8Ketoacyl_CoA()@c1 -1*(fRate138()) #Modifiers(s362, s111)
	re138_reactants_1: 0  -> CoA_SH()@c1 -1*(fRate138()) #Modifiers(s362, s111)
	re138_products_0: 0  -> C6Acyl_CoA()@c1 fRate138() #Modifiers(s362, s111)
	re144_reactants_0: 0  -> C6Ketoacyl_CoA()@c1 -1*(fRate139()) #Modifiers(s362, s116)
	re144_reactants_1: 0  -> CoA_SH()@c1 -1*(fRate139()) #Modifiers(s362, s116)
	re144_products_0: 0  -> C4Acyl_CoA()@c1 fRate139() #Modifiers(s362, s116)
	re97: ACoA()@c1 -> AcetoacetylCoA()@c1 + CoA_SH()@c1 fRate140() #Modifiers(s362, s348)
	re96_reactants_0: 0  -> AcetoacetylCoA()@c1 -1*(fRate141()) #Modifiers(s362, s321)
	re96_reactants_1: 0  -> CoA_SH()@c1 -1*(fRate141()) #Modifiers(s362, s321)
	re96_products_0: 0  -> ACoA()@c1 fRate141() #Modifiers(s362, s321)
	re147_reactants_0: 0  -> C4Ketoacyl_CoA()@c1 -1*(fRate142()) #Modifiers(s362, s119)
	re147_reactants_1: 0  -> CoA_SH()@c1 -1*(fRate142()) #Modifiers(s362, s119)
	re147_products_0: 0  -> ACoA()@c1 fRate142() #Modifiers(s362, s119)
	re110_reactants_0: 0  -> C22Acyl_CoA()@c1 -1*(fRate143()) #Modifiers(s364, s15)
	re110_reactants_1: 0  -> FAD()@c1 -1*(fRate143()) #Modifiers(s364, s15)
	re110_products_0: 0  -> C222_trans_enoyl_CoA()@c1 fRate143() #Modifiers(s364, s15)
	re110_products_1: 0  -> FADH2()@c1 fRate143() #Modifiers(s364, s15)
	re117_reactants_0: 0  -> C20Acyl_CoA()@c1 -1*(fRate144()) #Modifiers(s364, s42)
	re117_reactants_1: 0  -> FAD()@c1 -1*(fRate144()) #Modifiers(s364, s42)
	re117_products_0: 0  -> C202_trans_enoyl_CoA()@c1 fRate144() #Modifiers(s364, s42)
	re117_products_1: 0  -> FADH2()@c1 fRate144() #Modifiers(s364, s42)
	re125_reactants_0: 0  -> C18Acyl_CoA()@c1 -1*(fRate145()) #Modifiers(s364, s65)
	re125_reactants_1: 0  -> FAD()@c1 -1*(fRate145()) #Modifiers(s364, s65)
	re125_products_0: 0  -> C182_trans_enoyl_CoA()@c1 fRate145() #Modifiers(s364, s65)
	re125_products_1: 0  -> FADH2()@c1 fRate145() #Modifiers(s364, s65)
	re124_reactants_0: 0  -> C16Acyl_CoA()@c1 -1*(fRate146()) #Modifiers(s364, s83)
	re124_reactants_1: 0  -> FAD()@c1 -1*(fRate146()) #Modifiers(s364, s83)
	re124_products_0: 0  -> C162_trans_enoyl_CoA()@c1 fRate146() #Modifiers(s364, s83)
	re124_products_1: 0  -> FADH2()@c1 fRate146() #Modifiers(s364, s83)
	re141_reactants_0: 0  -> C14Acyl_CoA()@c1 -1*(fRate147()) #Modifiers(s364, s84)
	re141_reactants_1: 0  -> FAD()@c1 -1*(fRate147()) #Modifiers(s364, s84)
	re141_products_0: 0  -> C142_trans_enoyl_CoA()@c1 fRate147() #Modifiers(s364, s84)
	re141_products_1: 0  -> FADH2()@c1 fRate147() #Modifiers(s364, s84)
	re132_reactants_0: 0  -> C12Acyl_CoA()@c1 -1*(fRate148()) #Modifiers(s364, s101)
	re132_reactants_1: 0  -> FAD()@c1 -1*(fRate148()) #Modifiers(s364, s101)
	re132_products_0: 0  -> C122_trans_enoyl_CoA()@c1 fRate148() #Modifiers(s364, s101)
	re132_products_1: 0  -> FADH2()@c1 fRate148() #Modifiers(s364, s101)
	re140_reactants_0: 0  -> C10Acyl_CoA()@c1 -1*(fRate149()) #Modifiers(s364, s102)
	re140_reactants_1: 0  -> FAD()@c1 -1*(fRate149()) #Modifiers(s364, s102)
	re140_products_0: 0  -> C102_trans_enoyl_CoA()@c1 fRate149() #Modifiers(s364, s102)
	re140_products_1: 0  -> FADH2()@c1 fRate149() #Modifiers(s364, s102)
	re139_reactants_0: 0  -> C8Acyl_CoA()@c1 -1*(fRate150()) #Modifiers(s364, s109)
	re139_reactants_1: 0  -> FAD()@c1 -1*(fRate150()) #Modifiers(s364, s109)
	re139_products_0: 0  -> C82_trans_enoyl_CoA()@c1 fRate150() #Modifiers(s364, s109)
	re139_products_1: 0  -> FADH2()@c1 fRate150() #Modifiers(s364, s109)
	re149_reactants_0: 0  -> C6Acyl_CoA()@c1 -1*(fRate151()) #Modifiers(s364, s110)
	re149_reactants_1: 0  -> FAD()@c1 -1*(fRate151()) #Modifiers(s364, s110)
	re149_products_0: 0  -> C62_trans_enoyl_CoA()@c1 fRate151() #Modifiers(s364, s110)
	re149_products_1: 0  -> FADH2()@c1 fRate151() #Modifiers(s364, s110)
	re148_reactants_0: 0  -> C4Acyl_CoA()@c1 -1*(fRate152()) #Modifiers(s364, s117)
	re148_reactants_1: 0  -> FAD()@c1 -1*(fRate152()) #Modifiers(s364, s117)
	re148_products_0: 0  -> C42_trans_enoyl_CoA()@c1 fRate152() #Modifiers(s364, s117)
	re148_products_1: 0  -> FADH2()@c1 fRate152() #Modifiers(s364, s117)
	re111_reactants_0: 0  -> C222_trans_enoyl_CoA()@c1 -1*(fRate153()) #Modifiers(s365, s19)
	re111_reactants_1: 0  -> H2O()@c1 -1*(fRate153()) #Modifiers(s365, s19)
	re111_products_0: 0  -> C22L_3_hydroxyacyl_CoA()@c1 fRate153() #Modifiers(s365, s19)
	re114_reactants_0: 0  -> C202_trans_enoyl_CoA()@c1 -1*(fRate154()) #Modifiers(s365, s69)
	re114_reactants_1: 0  -> H2O()@c1 -1*(fRate154()) #Modifiers(s365, s69)
	re114_products_0: 0  -> C20L_3_hydroxyacyl_CoA()@c1 fRate154() #Modifiers(s365, s69)
	re118_reactants_0: 0  -> C182_trans_enoyl_CoA()@c1 -1*(fRate155()) #Modifiers(s365, s70)
	re118_reactants_1: 0  -> H2O()@c1 -1*(fRate155()) #Modifiers(s365, s70)
	re118_products_0: 0  -> C18L_3_hydroxyacyl_CoA()@c1 fRate155() #Modifiers(s365, s70)
	re121_reactants_0: 0  -> C162_trans_enoyl_CoA()@c1 -1*(fRate156()) #Modifiers(s365, s97)
	re121_reactants_1: 0  -> H2O()@c1 -1*(fRate156()) #Modifiers(s365, s97)
	re121_products_0: 0  -> C16L_3_hydroxyacyl_CoA()@c1 fRate156() #Modifiers(s365, s97)
	re126_reactants_0: 0  -> C142_trans_enoyl_CoA()@c1 -1*(fRate157()) #Modifiers(s365, s98)
	re126_reactants_1: 0  -> H2O()@c1 -1*(fRate157()) #Modifiers(s365, s98)
	re126_products_0: 0  -> C14L_3_hydroxyacyl_CoA()@c1 fRate157() #Modifiers(s365, s98)
	re129_reactants_0: 0  -> C122_trans_enoyl_CoA()@c1 -1*(fRate158()) #Modifiers(s365, s105)
	re129_reactants_1: 0  -> H2O()@c1 -1*(fRate158()) #Modifiers(s365, s105)
	re129_products_0: 0  -> C12L_3_hydroxyacyl_CoA()@c1 fRate158() #Modifiers(s365, s105)
	re133_reactants_0: 0  -> C102_trans_enoyl_CoA()@c1 -1*(fRate159()) #Modifiers(s365, s106)
	re133_reactants_1: 0  -> H2O()@c1 -1*(fRate159()) #Modifiers(s365, s106)
	re133_products_0: 0  -> C10L_3_hydroxyacyl_CoA()@c1 fRate159() #Modifiers(s365, s106)
	re136_reactants_0: 0  -> C82_trans_enoyl_CoA()@c1 -1*(fRate160()) #Modifiers(s365, s113)
	re136_reactants_1: 0  -> H2O()@c1 -1*(fRate160()) #Modifiers(s365, s113)
	re136_products_0: 0  -> C8L_3_hydroxyacyl_CoA()@c1 fRate160() #Modifiers(s365, s113)
	re142_reactants_0: 0  -> C62_trans_enoyl_CoA()@c1 -1*(fRate161()) #Modifiers(s365, s114)
	re142_reactants_1: 0  -> H2O()@c1 -1*(fRate161()) #Modifiers(s365, s114)
	re142_products_0: 0  -> C6L_3_hydroxyacyl_CoA()@c1 fRate161() #Modifiers(s365, s114)
	re145_reactants_0: 0  -> C42_trans_enoyl_CoA()@c1 -1*(fRate162()) #Modifiers(s365, s121)
	re145_reactants_1: 0  -> H2O()@c1 -1*(fRate162()) #Modifiers(s365, s121)
	re145_products_0: 0  -> C4L_3_hydroxyacyl_CoA()@c1 fRate162() #Modifiers(s365, s121)
	re112_reactants_0: 0  -> C22L_3_hydroxyacyl_CoA()@c1 -1*(fRate163()) #Modifiers(s366, s22)
	re112_reactants_1: 0  -> NADpl()@c1 -1*(fRate163()) #Modifiers(s366, s22)
	re112_products_0: 0  -> C22Ketoacyl_CoA()@c1 fRate163() #Modifiers(s366, s22)
	re112_products_1: 0  -> NADH_s351()@c1 fRate163() #Modifiers(s366, s22)
	re112_products_2: 0  -> Hpl()@c1 fRate163() #Modifiers(s366, s22)
	re115_reactants_0: 0  -> C20L_3_hydroxyacyl_CoA()@c1 -1*(fRate164()) #Modifiers(s366, s68)
	re115_reactants_1: 0  -> NADpl()@c1 -1*(fRate164()) #Modifiers(s366, s68)
	re115_products_0: 0  -> C20Ketoacyl_CoA()@c1 fRate164() #Modifiers(s366, s68)
	re115_products_1: 0  -> NADH_s351()@c1 fRate164() #Modifiers(s366, s68)
	re115_products_2: 0  -> Hpl()@c1 fRate164() #Modifiers(s366, s68)
	re119_reactants_0: 0  -> C18L_3_hydroxyacyl_CoA()@c1 -1*(fRate165()) #Modifiers(s366, s72)
	re119_reactants_1: 0  -> NADpl()@c1 -1*(fRate165()) #Modifiers(s366, s72)
	re119_products_0: 0  -> C18Ketoacyl_CoA()@c1 fRate165() #Modifiers(s366, s72)
	re119_products_1: 0  -> NADH_s351()@c1 fRate165() #Modifiers(s366, s72)
	re119_products_2: 0  -> Hpl()@c1 fRate165() #Modifiers(s366, s72)
	re122_reactants_0: 0  -> C16L_3_hydroxyacyl_CoA()@c1 -1*(fRate166()) #Modifiers(s366, s96)
	re122_reactants_1: 0  -> NADpl()@c1 -1*(fRate166()) #Modifiers(s366, s96)
	re122_products_0: 0  -> C16Ketoacyl_CoA()@c1 fRate166() #Modifiers(s366, s96)
	re122_products_1: 0  -> NADH_s351()@c1 fRate166() #Modifiers(s366, s96)
	re122_products_2: 0  -> Hpl()@c1 fRate166() #Modifiers(s366, s96)
	re127_reactants_0: 0  -> C14L_3_hydroxyacyl_CoA()@c1 -1*(fRate167()) #Modifiers(s366, s99)
	re127_reactants_1: 0  -> NADpl()@c1 -1*(fRate167()) #Modifiers(s366, s99)
	re127_products_0: 0  -> C14Ketoacyl_CoA()@c1 fRate167() #Modifiers(s366, s99)
	re127_products_1: 0  -> NADH_s351()@c1 fRate167() #Modifiers(s366, s99)
	re127_products_2: 0  -> Hpl()@c1 fRate167() #Modifiers(s366, s99)
	re130_reactants_0: 0  -> C12L_3_hydroxyacyl_CoA()@c1 -1*(fRate168()) #Modifiers(s366, s104)
	re130_reactants_1: 0  -> NADpl()@c1 -1*(fRate168()) #Modifiers(s366, s104)
	re130_products_0: 0  -> C12Ketoacyl_CoA()@c1 fRate168() #Modifiers(s366, s104)
	re130_products_1: 0  -> NADH_s351()@c1 fRate168() #Modifiers(s366, s104)
	re130_products_2: 0  -> Hpl()@c1 fRate168() #Modifiers(s366, s104)
	re134_reactants_0: 0  -> C10L_3_hydroxyacyl_CoA()@c1 -1*(fRate169()) #Modifiers(s366, s107)
	re134_reactants_1: 0  -> NADpl()@c1 -1*(fRate169()) #Modifiers(s366, s107)
	re134_products_0: 0  -> C10Ketoacyl_CoA()@c1 fRate169() #Modifiers(s366, s107)
	re134_products_1: 0  -> NADH_s351()@c1 fRate169() #Modifiers(s366, s107)
	re134_products_2: 0  -> Hpl()@c1 fRate169() #Modifiers(s366, s107)
	re137_reactants_0: 0  -> C8L_3_hydroxyacyl_CoA()@c1 -1*(fRate170()) #Modifiers(s366, s112)
	re137_reactants_1: 0  -> NADpl()@c1 -1*(fRate170()) #Modifiers(s366, s112)
	re137_products_0: 0  -> C8Ketoacyl_CoA()@c1 fRate170() #Modifiers(s366, s112)
	re137_products_1: 0  -> NADH_s351()@c1 fRate170() #Modifiers(s366, s112)
	re137_products_2: 0  -> Hpl()@c1 fRate170() #Modifiers(s366, s112)
	re143_reactants_0: 0  -> C6L_3_hydroxyacyl_CoA()@c1 -1*(fRate171()) #Modifiers(s366, s115)
	re143_reactants_1: 0  -> NADpl()@c1 -1*(fRate171()) #Modifiers(s366, s115)
	re143_products_0: 0  -> C6Ketoacyl_CoA()@c1 fRate171() #Modifiers(s366, s115)
	re143_products_1: 0  -> NADH_s351()@c1 fRate171() #Modifiers(s366, s115)
	re143_products_2: 0  -> Hpl()@c1 fRate171() #Modifiers(s366, s115)
	re146_reactants_0: 0  -> C4L_3_hydroxyacyl_CoA()@c1 -1*(fRate172()) #Modifiers(s366, s120)
	re146_reactants_1: 0  -> NADpl()@c1 -1*(fRate172()) #Modifiers(s366, s120)
	re146_products_0: 0  -> C4Ketoacyl_CoA()@c1 fRate172() #Modifiers(s366, s120)
	re146_products_1: 0  -> NADH_s351()@c1 fRate172() #Modifiers(s366, s120)
	re146_products_2: 0  -> Hpl()@c1 fRate172() #Modifiers(s366, s120)
	re175_reactants_0: 0  -> Creatinephosphate()@c1 -1*(fRate173()) #Modifiers(s400, s124)
	re175_reactants_1: 0  -> ATP()@c1 -1*(fRate173()) #Modifiers(s400, s124)
	re175_products_0: 0  -> Creatine()@c4 fRate173() #Modifiers(s400, s124)
	re182: Creatine()@c4 -> Creatinephosphate()@c1 + AMP()@c1 fRate174() #Modifiers(s123)
end reaction rules
end model
