###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000582', 'http://identifiers.org/biomodels.db/MODEL1506230000']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/25166345']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0032869', 'http://identifiers.org/go/GO:2000772']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_OCCURS_IN:['http://identifiers.org/bto/BTO:0001590']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is a plain translation of an SBML model created on 13/08/2021. The original model has 40 molecules and 41 reactions. The translated model has 23 molecules and 41 rules'
###
begin model
begin parameters
	Akt_S473_phos_by_insulin 0.588783148144923
	Akt_pS473_dephos_by_mTORC1_pS2448 0.114598191621279
	AMPK_T172_phos 0.355183987378767
	AMPK_pT172_dephos_by_Mito_membr_pot_new 0.117744691539618
	AMPK_pT172_dephos_by_Mito_membr_pot_old 1.00000000000003e-06
	mTORC1_S2448_phos_by_AA 1.00008999860285e-06
	mTORC1_S2448_phos_by_AA_n_Akt_pS473 162.471039450073
	mTORC1_pS2448_dephos_by_AMPK_pT172 191.297262771509
	mitophagy_activ_by_FoxO3a_n_AMPK_pT172 1319.84219165251
	mitophagy_inactiv_by_mTORC1_pS2448 645.999307230137
	FoxO3a_phos_by_Akt_pS473 6.83511123229576
	FoxO3a_phos_by_JNK_pT183 0.112877630496044
	FoxO3a_pS253_degrad 39.4068609318082
	FoxO3a_synthesis 407.307409980937
	CDKN1A_transcr_by_FoxO3a_n_DNA_damage 0.0852182335681166
	CDKN1A_inactiv_by_Akt_pS473 0.0667971061916905
	CDKN1B_transcr_by_FoxO3a_n_DNA_damage 0.0920526565951487
	CDKN1B_inactiv_by_Akt_pS473 0.0596841598127919
	DNA_damaged_by_irradiation 9237.72311545872
	DNA_repair 0.325724769122274
	DNA_damaged_by_ROS 0.118873655169353
	ROS_prod_by_Mito_membr_pot_new 4.55464788075885
	ROS_prod_by_Mito_membr_pot_old 772.829490967078
	ROS_turnover 3.23082321168464
	JNK_activ_by_ROS 0.00502329152478409
	JNK_pT183_inactiv 0.0718429173444438
	IKKbeta_activ_by_ROS 1.0
	IKKbeta_inactiv 1.0
	mTORC1_S2448_phos_by_AA_n_IKKbeta 1.00008996727694e-05
	sen_ass_beta_gal_inc_by_ROS 0.0701139988718817
	sen_ass_beta_gal_inc_by_Mitophagy 1.00000000000011e-06
	sen_ass_beta_gal_dec 0.154821166783837
	mito_biogenesis_by_mTORC1_pS2448 0.0133620123598202
	mito_biogenesis_by_AMPK_pT172 5.8915457309741e-05
	mitophagy_new 0.22465992989378
	mitophagy_old 0.00122607614891116
	mito_dysfunction 0.0270695257507146
	mito_membr_pot_new_inc 9882.02736076158
	mito_membr_pot_old_inc 0.00586017882122243
	mito_membr_pot_new_dec 1094.58423149719
	mito_membr_pot_old_dec 0.954903499913184
	scale_Akt_pS473_obs 1.0
	scale_FoxO3a_pS253_obs 1.0
	scale_FoxO3a_total_obs 1.0
	scale_AMPK_pT172_obs 1.0
	scale_mTOR_pS2448_obs 1.0
	scale_Mitophagy_obs 1.0
	scale_Mito_Mass_obs 1.0
	scale_Mito_Membr_Pot_obs 1.0
	scale_CDKN1A_obs 1.0
	scale_CDKN1B_obs 1.0
	scale_ROS_obs 1.0
	scale_DNA_damage_gammaH2AX_obs 1.0
	scale_JNK_pT183_obs 1.0
	scale_SA_beta_gal_obs 1.0
	Insulin 0 #original 1.0substance/volume
	Amino_Acids 0 #original 1.0substance/volume
	Irradiation 0 #original 1.0substance/volume
	DNA_damage_gammaH2AX_obs 6.022e+23 #original 1.0substance/volume
	Akt_pS473_obs 6.022e+24 #original 10.0substance/volume
	mTOR_pS2448_obs 6.022e+24 #original 10.0substance/volume
	AMPK_pT172_obs 6.022e+24 #original 10.0substance/volume
	CDKN1A_obs 6.022e+24 #original 10.0substance/volume
	CDKN1B_obs 6.022e+24 #original 10.0substance/volume
	FoxO3a_pS253_obs 6.022e+24 #original 10.0substance/volume
	FoxO3a_total_obs 1.2044e+25 #original 20.0substance/volume
	Mito_Mass_obs 6.022e+23 #original 1.0substance/volume
	Mito_Membr_Pot_obs 7.298664e+24 #original 12.12substance/volume
	Mitophagy_obs 6.022e+24 #original 10.0substance/volume
	ROS_obs 6.022e+24 #original 10.0substance/volume
	JNK_pT183_obs 6.022e+24 #original 10.0substance/volume
	SA_beta_gal_obs 4.87782e+23 #original 0.81substance/volume
end parameters
begin molecule types
	AMPK()
	DNA_damage()
	IKKbeta()
	Mito_membr_pot_old()
	AMPK_pT172()
	SA_beta_gal()
	Mitophagy()
	mTORC1()
	CDKN1B()
	FoxO3a()
	Akt_pS473()
	Mito_mass_new()
	CDKN1A()
	Mito_membr_pot_new()
	FoxO3a_pS253()
	Mito_mass_turnover()
	JNK()
	Akt()
	mTORC1_pS2448()
	Mito_mass_old()
	JNK_pT183()
	ROS()
	Nil()
end molecule types
begin seed species
	Akt() 6.022e+24 # 10.0mol/L * 6.022e23/mol *1.0L #Akt #Akt
	Akt_pS473() 6.022e+24 #original 10.0substance/volume #Akt_pS473 #Akt_pS473
	AMPK() 6.022e+24 #original 10.0substance/volume #AMPK #AMPK
	AMPK_pT172() 6.022e+24 #original 10.0substance/volume #AMPK_pT172 #AMPK_pT172
	mTORC1() 6.022e+24 #original 10.0substance/volume #mTORC1 #mTORC1
	mTORC1_pS2448() 6.022e+24 #original 10.0substance/volume #mTORC1_pS2448 #mTORC1_pS2448
	Mitophagy() 6.022e+24 #original 10.0substance/volume #Mitophagy #Mitophagy
	FoxO3a() 6.022e+24 #original 10.0substance/volume #FoxO3a #FoxO3a
	FoxO3a_pS253() 6.022e+24 #original 10.0substance/volume #FoxO3a_pS253 #FoxO3a_pS253
	CDKN1A() 6.022e+24 #original 10.0substance/volume #CDKN1A #CDKN1A
	CDKN1B() 6.022e+24 #original 10.0substance/volume #CDKN1B #CDKN1B
	JNK() 1.5055e+25 #original 25.0substance/volume #JNK #JNK
	JNK_pT183() 6.022e+24 #original 10.0substance/volume #JNK_pT183 #JNK_pT183
	ROS() 6.022e+24 #original 10.0substance/volume #ROS #ROS
	DNA_damage() 6.022e+23 #original 1.0substance/volume #DNA_damage #DNA_damage
	SA_beta_gal() 4.8778200000000004e+23 #original 0.81substance/volume #SA_beta_gal #SA_beta_gal
	IKKbeta() 6.022e+24 #original 10.0substance/volume #IKKbeta #IKKbeta
	Mito_mass_new() 6.022e+23 #original 1.0substance/volume #Mito_mass_new #Mito_mass_new
	Mito_mass_turnover() 1.5055e+25 #original 25.0substance/volume #Mito_mass_turnover #Mito_mass_turnover
	Mito_membr_pot_new() 7.298664e+24 #original 12.12substance/volume #Mito_membr_pot_new #Mito_membr_pot_new
end seed species
begin observables
	Species Akt Akt() #Akt
	Species Akt_pS473 Akt_pS473() #Akt_pS473
	Species AMPK AMPK() #AMPK
	Species AMPK_pT172 AMPK_pT172() #AMPK_pT172
	Species mTORC1 mTORC1() #mTORC1
	Species mTORC1_pS2448 mTORC1_pS2448() #mTORC1_pS2448
	Species Mitophagy Mitophagy() #Mitophagy
	Species FoxO3a FoxO3a() #FoxO3a
	Species FoxO3a_pS253 FoxO3a_pS253() #FoxO3a_pS253
	Species CDKN1A CDKN1A() #CDKN1A
	Species CDKN1B CDKN1B() #CDKN1B
	Species JNK JNK() #JNK
	Species JNK_pT183 JNK_pT183() #JNK_pT183
	Species ROS ROS() #ROS
	Species DNA_damage DNA_damage() #DNA_damage
	Species SA_beta_gal SA_beta_gal() #SA_beta_gal
	Species IKKbeta IKKbeta() #IKKbeta
	Species Mito_mass_new Mito_mass_new() #Mito_mass_new
	Species Mito_mass_old Mito_mass_old() #Mito_mass_old
	Species Mito_mass_turnover Mito_mass_turnover() #Mito_mass_turnover
	Species Mito_membr_pot_new Mito_membr_pot_new() #Mito_membr_pot_new
	Species Mito_membr_pot_old Mito_membr_pot_old() #Mito_membr_pot_old
	Species Nil Nil() #Nil
end observables
begin functions
	mTOR_pS2448_obs_ar() = mTORC1_pS2448*scale_mTOR_pS2448_obs
	FoxO3a_pS253_obs_ar() = FoxO3a_pS253*scale_FoxO3a_pS253_obs
	AMPK_pT172_obs_ar() = AMPK_pT172*scale_AMPK_pT172_obs
	Mito_Mass_obs_ar() = scale_Mito_Mass_obs*(Mito_mass_new + Mito_mass_old)
	CDKN1A_obs_ar() = CDKN1A*scale_CDKN1A_obs
	CDKN1B_obs_ar() = CDKN1B*scale_CDKN1B_obs
	Mito_Membr_Pot_obs_ar() = scale_Mito_Membr_Pot_obs*(Mito_membr_pot_new + Mito_membr_pot_old)
	Mitophagy_obs_ar() = Mitophagy*scale_Mitophagy_obs
	FoxO3a_total_obs_ar() = scale_FoxO3a_total_obs*(FoxO3a + FoxO3a_pS253)
	ROS_obs_ar() = ROS*scale_ROS_obs
	JNK_pT183_obs_ar() = JNK_pT183*scale_JNK_pT183_obs
	SA_beta_gal_obs_ar() = SA_beta_gal*scale_SA_beta_gal_obs
	Akt_pS473_obs_ar() = Akt_pS473*scale_Akt_pS473_obs
	Irradiation_ar() =  if((time()<-1),(0),(if((time()<0),(0),(if((time()<0.003472),(1),(0))))))
	Amino_Acids_ar() =  if((time()<-1),(1),(if((time()<0),(1),(1))))
	Insulin_ar() =  if((time()<-1),(1),(if((time()<0),(1),(1))))
	DNA_damage_gammaH2AX_obs_ar() = DNA_damage*scale_DNA_damage_gammaH2AX_obs
	fRate0() = Akt_S473_phos_by_insulin*Insulin_ar
	fRate1() = Akt_pS473_dephos_by_mTORC1_pS2448*mTORC1_pS2448
	fRate3() = AMPK_pT172_dephos_by_Mito_membr_pot_new*Mito_membr_pot_new
	fRate4() = AMPK_pT172_dephos_by_Mito_membr_pot_old*Mito_membr_pot_old
	fRate5() = Amino_Acids_ar*mTORC1_S2448_phos_by_AA
	fRate6() = Akt_pS473*Amino_Acids_ar*mTORC1_S2448_phos_by_AA_n_Akt_pS473
	fRate7() = AMPK_pT172*mTORC1_pS2448_dephos_by_AMPK_pT172
	fRate8() = AMPK_pT172*FoxO3a*mitophagy_activ_by_FoxO3a_n_AMPK_pT172
	fRate9() = mTORC1_pS2448*mitophagy_inactiv_by_mTORC1_pS2448
	fRate10() = Akt_pS473*FoxO3a_phos_by_Akt_pS473
	fRate11() = FoxO3a_phos_by_JNK_pT183*JNK_pT183
	fRate14() = CDKN1A_transcr_by_FoxO3a_n_DNA_damage*DNA_damage*FoxO3a
	fRate15() = Akt_pS473*CDKN1A_inactiv_by_Akt_pS473
	fRate16() = CDKN1B_transcr_by_FoxO3a_n_DNA_damage*DNA_damage*FoxO3a
	fRate17() = Akt_pS473*CDKN1B_inactiv_by_Akt_pS473
	fRate18() = DNA_damaged_by_irradiation*Irradiation_ar
	fRate19() = DNA_damaged_by_ROS*ROS
	fRate21() = Mito_membr_pot_new*ROS_prod_by_Mito_membr_pot_new
	fRate22() = Mito_membr_pot_old*ROS_prod_by_Mito_membr_pot_old
	fRate24() = JNK_activ_by_ROS*ROS
	fRate26() = ROS*sen_ass_beta_gal_inc_by_ROS
	fRate27() = Mitophagy*sen_ass_beta_gal_inc_by_Mitophagy
	fRate29() = mTORC1_pS2448*mito_biogenesis_by_mTORC1_pS2448
	fRate30() = mTORC1_pS2448*mito_biogenesis_by_AMPK_pT172
	fRate31() = Mitophagy*mitophagy_new
	fRate32() = Mitophagy*mitophagy_old
	fRate33() = CDKN1A*mito_dysfunction
	fRate34() = Mito_mass_new*mito_membr_pot_new_inc
	fRate35() = Mito_mass_old*mito_membr_pot_old_inc
	fRate38() = IKKbeta_activ_by_ROS*ROS
	fRate40() = Amino_Acids_ar*IKKbeta*mTORC1_S2448_phos_by_AA_n_IKKbeta
end functions
begin reaction rules
	reaction_1: Akt() -> Akt_pS473() fRate0() #Modifiers(Insulin, Akt, Insulin)
	reaction_2: Akt_pS473() -> Akt() fRate1() #Modifiers(mTORC1_pS2448, Akt_pS473, mTORC1_pS2448)
	reaction_3: AMPK() -> AMPK_pT172() AMPK_T172_phos #Modifiers(AMPK)
	reaction_4: AMPK_pT172() -> AMPK() fRate3() #Modifiers(Mito_membr_pot_new, AMPK_pT172, Mito_membr_pot_new)
	reaction_5: AMPK_pT172() -> AMPK() fRate4() #Modifiers(Mito_membr_pot_old, AMPK_pT172, Mito_membr_pot_old)
	reaction_6: mTORC1() -> mTORC1_pS2448() fRate5() #Modifiers(Amino_Acids, Amino_Acids, mTORC1)
	reaction_7: mTORC1() -> mTORC1_pS2448() fRate6() #Modifiers(Amino_Acids, Akt_pS473, Akt_pS473, Amino_Acids, mTORC1)
	reaction_8: mTORC1_pS2448() -> mTORC1() fRate7() #Modifiers(AMPK_pT172, AMPK_pT172, mTORC1_pS2448)
	reaction_9: 0  -> Mitophagy() fRate8() #Modifiers(FoxO3a, AMPK_pT172, AMPK_pT172, FoxO3a)
	reaction_10: Mitophagy() -> Nil() fRate9() #Modifiers(mTORC1_pS2448, Mitophagy, mTORC1_pS2448)
	reaction_11: FoxO3a() -> FoxO3a_pS253() fRate10() #Modifiers(Akt_pS473, Akt_pS473, FoxO3a)
	reaction_12: FoxO3a_pS253() -> FoxO3a() fRate11() #Modifiers(JNK_pT183, FoxO3a_pS253, JNK_pT183)
	reaction_13: FoxO3a_pS253() -> Nil() FoxO3a_pS253_degrad #Modifiers(FoxO3a_pS253)
	reaction_14: 0  -> FoxO3a() FoxO3a_synthesis
	reaction_15: 0  -> CDKN1A() fRate14() #Modifiers(DNA_damage, FoxO3a, DNA_damage, FoxO3a)
	reaction_16: CDKN1A() -> Nil() fRate15() #Modifiers(Akt_pS473, Akt_pS473, CDKN1A)
	reaction_17: 0  -> CDKN1B() fRate16() #Modifiers(DNA_damage, FoxO3a, DNA_damage, FoxO3a)
	reaction_18: CDKN1B() -> Nil() fRate17() #Modifiers(Akt_pS473, Akt_pS473, CDKN1B)
	reaction_19: 0  -> DNA_damage() fRate18() #Modifiers(Irradiation, Irradiation)
	reaction_20: 0  -> DNA_damage() fRate19() #Modifiers(ROS, ROS)
	reaction_21: DNA_damage() -> Nil() DNA_repair #Modifiers(DNA_damage)
	reaction_22: 0  -> ROS() fRate21() #Modifiers(Mito_membr_pot_new, Mito_membr_pot_new)
	reaction_23: 0  -> ROS() fRate22() #Modifiers(Mito_membr_pot_old, Mito_membr_pot_old)
	reaction_24: ROS() -> Nil() ROS_turnover #Modifiers(ROS)
	reaction_25: JNK() -> JNK_pT183() fRate24() #Modifiers(ROS, JNK, ROS)
	reaction_26: JNK_pT183() -> JNK() JNK_pT183_inactiv #Modifiers(JNK_pT183)
	reaction_27: 0  -> SA_beta_gal() fRate26() #Modifiers(ROS, ROS)
	reaction_28: 0  -> SA_beta_gal() fRate27() #Modifiers(Mitophagy, Mitophagy)
	reaction_29: SA_beta_gal() -> 0  sen_ass_beta_gal_dec #Modifiers(SA_beta_gal)
	reaction_30: Mito_mass_turnover() -> Mito_mass_new() fRate29() #Modifiers(mTORC1_pS2448, Mito_mass_turnover, mTORC1_pS2448)
	reaction_31: Mito_mass_turnover() -> Mito_mass_new() fRate30() #Modifiers(mTORC1_pS2448, Mito_mass_turnover, mTORC1_pS2448)
	reaction_32: Mito_mass_new() -> Mito_mass_turnover() fRate31() #Modifiers(Mitophagy, Mito_mass_new, Mitophagy)
	reaction_33: Mito_mass_old() -> Mito_mass_turnover() fRate32() #Modifiers(Mitophagy, Mito_mass_old, Mitophagy)
	reaction_34: Mito_mass_new() -> Mito_mass_old() fRate33() #Modifiers(CDKN1A, CDKN1A, Mito_mass_new)
	reaction_35: 0  -> Mito_membr_pot_new() fRate34() #Modifiers(Mito_mass_new, Mito_mass_new)
	reaction_36: 0  -> Mito_membr_pot_old() fRate35() #Modifiers(Mito_mass_old, Mito_mass_old)
	reaction_37: Mito_membr_pot_new() -> Nil() mito_membr_pot_new_dec #Modifiers(Mito_membr_pot_new)
	reaction_38: Mito_membr_pot_old() -> Nil() mito_membr_pot_old_dec #Modifiers(Mito_membr_pot_old)
	reaction_39: 0  -> IKKbeta() fRate38() #Modifiers(ROS, ROS)
	reaction_40: IKKbeta() -> Nil() IKKbeta_inactiv #Modifiers(IKKbeta)
	reaction_41: mTORC1() -> mTORC1_pS2448() fRate40() #Modifiers(Amino_Acids, IKKbeta, Amino_Acids, IKKbeta, mTORC1)
end reaction rules
end model
