###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1501220000', 'http://identifiers.org/biomodels.db/BIOMD0000000591']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/25333863']
#@BQB_OCCURS_IN:['http://identifiers.org/bto/BTO:0001516']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/10090']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0042522', 'http://identifiers.org/go/GO:0038162']
#@creatorEmail:'l.adlung@dkfz-heidelberg.de'
#@creatorName:'Adlung Lorenz'
#@notes:'This is a plain translation of an SBML model created on 13/08/2021. The original model has 8 molecules and 9 reactions. The translated model has 8 molecules and 9 rules'
###
begin model
begin parameters
	Epo_degradation_BaF3 0.0269765368088175
	k_exp_hetero 1.00097114635938e-05
	k_exp_homo 0.0061723799618614
	k_imp_hetero 0.0163701561812467
	k_imp_homo 96807.6817909446
	k_phos 15767.6469913504
	ratio 0.693
end parameters
begin compartments
	#volume units: L
	cyt 3 1.4
	nuc 3 0.45
end compartments
begin molecule types
	nucpApB()
	pBpB()
	nucpBpB()
	pApA()
	nucpApA()
	STAT5A()
	pApB()
	STAT5B()
end molecule types
begin seed species
	@cyt:STAT5A()() 207.6 * (0.693) #STAT5A
	@cyt:STAT5B()() 207.6 -207.6 * (0.693) #STAT5B
end seed species
begin observables
	Species STAT5A_cyt @cyt:STAT5A() #STAT5A
	Species STAT5B_cyt @cyt:STAT5B() #STAT5B
	Species pApB_cyt @cyt:pApB() #pApB
	Species pApA_cyt @cyt:pApA() #pApA
	Species pBpB_cyt @cyt:pBpB() #pBpB
	Species nucpApA_nuc @nuc:nucpApA() #nucpApA
	Species nucpApB_nuc @nuc:nucpApB() #nucpApB
	Species nucpBpB_nuc @nuc:nucpBpB() #nucpBpB
end observables
begin functions
	fRate0() = 1.25e-7*k_phos*exp(-Epo_degradation_BaF3*time())
	fRate1() = 1.25e-7*k_phos*exp(-Epo_degradation_BaF3*time())
	fRate2() = 1.25e-7*k_phos*exp(-Epo_degradation_BaF3*time())
end functions
begin reaction rules
	reaction1: STAT5A()@cyt + STAT5A()@cyt -> pApA()@cyt fRate0() #Modifiers(STAT5A)
	reaction2: STAT5A()@cyt + STAT5B()@cyt -> pApB()@cyt fRate1() #Modifiers(STAT5A, STAT5B)
	reaction3: STAT5B()@cyt + STAT5B()@cyt -> pBpB()@cyt fRate2() #Modifiers(STAT5B)
	reaction4: pApA()@cyt -> nucpApA()@nuc k_imp_homo #Modifiers(pApA)
	reaction5: pApB()@cyt -> nucpApB()@nuc k_imp_hetero #Modifiers(pApB)
	reaction6: pBpB()@cyt -> nucpBpB()@nuc k_imp_homo #Modifiers(pBpB)
	reaction7: nucpApA()@nuc -> STAT5A()@cyt + STAT5A()@cyt k_exp_homo #Modifiers(nucpApA)
	reaction8: nucpApB()@nuc -> STAT5A()@cyt + STAT5B()@cyt k_exp_hetero #Modifiers(nucpApB)
	reaction9: nucpBpB()@nuc -> STAT5B()@cyt + STAT5B()@cyt k_exp_homo #Modifiers(nucpBpB)
end reaction rules
end model
