###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000595', 'http://identifiers.org/biomodels.db/MODEL1505190000']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/26264748']
#@BQB_HAS_PROPERTY:['http://identifiers.org/doid/DOID:162']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_OCCURS_IN:['http://identifiers.org/bto/BTO:0000567']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0007173']
#@creatorEmail:'fabrizio.capuani@ifom.eu'
#@creatorName:'Capuani Fabrizio'
#@notes:'This is a plain translation of an SBML model created on 13/08/2021. The original model has 218 molecules and 1490 reactions. The translated model has 212 molecules and 1490 rules'
###
begin model
begin parameters
	RT 0.83
	CblT 0.01464
	Grb2T 3.32
	K 3.38608
	Ke 32.0
	K1 52.0
	kptp 0.016
	kkin 0.289502
	K45 0.201361
	Kcg 0.006356
	ku45 0.001011
	kucg 0.309271
	kb 5.0
	kc 10.0
	kuDIM 1.0546
	kbDIM 200.0
	k1u 0.15
	k1c 10.0
	PYMax 2.34537527177036
	UbMax 0.014306
	floc 20000.0
	CblWT 0.01464
	CblFactor 1.0
	Ltot 0
end parameters
begin molecule types
	Rc01UU()
	Rc12CU()
	RL12LU()
	RL01UG()
	DaL01UG()
	Rc10CU()
	R11UU()
	DiL02UG()
	R12CC()
	DiL11UL()
	RL11CG()
	RL11UU()
	Rc12UG()
	RcL12UL()
	Grb2()
	DaL11UU()
	R11CU()
	DiL11CU()
	R12CU()
	R12UL()
	RL11UG()
	Di02UU()
	Rc12CC()
	RL12CU()
	Di02UG()
	RL02UU()
	Di11CG()
	Rc12CG()
	R02UG()
	RcL01UG()
	DaL01UU()
	R11UL()
	DaL01UL()
	Rc11UL()
	Di12LU()
	R02UU()
	Da10CU()
	Di11UU()
	R12LG()
	RL10LU()
	RL02UL()
	R01UG()
	Di00UU()
	Da00UU()
	DaL12UU()
	RcL02UU()
	DiL11LU()
	Da11UL()
	RL11UL()
	Di11LU()
	DaL02UU()
	Di11CU()
	Da11CU()
	DiL11LG()
	RcL10UU()
	R12LU()
	RL11LG()
	Rc11UU()
	DaL12LU()
	R01UL()
	RL12UU()
	RL12UL()
	RcL10LU()
	DaL11UG()
	DaL11UL()
	DaL00UU()
	Rc11LU()
	Rc12LU()
	RcL11UU()
	RL02UG()
	Da12UL()
	DaL10LU()
	RcL12UU()
	DaL12UG()
	RcL12LU()
	Rc11CG()
	DiL02UU()
	Rc10LU()
	R01UU()
	RcL12CG()
	RcL02UG()
	R11LG()
	Di01UU()
	RL12LG()
	Di12CG()
	DiL01UU()
	DiL12UU()
	R10UU()
	DaL11LU()
	RcL11LU()
	DaL10UU()
	DiL11CG()
	DiL11CC()
	DiL10LU()
	DiL12CC()
	Di12UL()
	Da11CC()
	Da12LG()
	RcL12CC()
	RcL11LG()
	RL10UU()
	Rc11CC()
	RcL12UG()
	Cbl()
	Rc02UG()
	RL00UU()
	R12CG()
	Da12UG()
	RcL12LG()
	RcL11UG()
	Di10UU()
	DiL12UL()
	Rc00UU()
	R02UL()
	Rc01UG()
	DaL11CC()
	DiL10UU()
	R10CU()
	Rc11LG()
	DaL12CU()
	Di11UG()
	DiL12LU()
	Da12UU()
	Da12LU()
	Rc10UU()
	DiL01UG()
	Rc02UL()
	DiL12LG()
	RcL01UU()
	Rc11CU()
	RL12CG()
	RL01UU()
	Di01UL()
	Da10LU()
	DiL11UG()
	DaL02UG()
	RcL01UL()
	RL11LU()
	Da12CU()
	Rc12UL()
	Rc02UU()
	Da11UG()
	DiL10CU()
	Di12UU()
	R12UG()
	RL11CC()
	Rc12UU()
	R11CC()
	R12UU()
	Di10CU()
	CG()
	DaL10CU()
	L()
	DaL12CG()
	RcL12CU()
	Da01UU()
	RL12UG()
	RcL11CG()
	Da11UU()
	RcL10CU()
	Rc12LG()
	DiL11UU()
	Di12UG()
	Da12CC()
	Da02UU()
	Rc11UG()
	DaL11CG()
	RL12CC()
	DiL00UU()
	RcL11CU()
	Da01UG()
	Da11CG()
	Da11LU()
	Di02UL()
	RcL11UL()
	Di12LG()
	DiL12UG()
	DaL02UL()
	RcL11CC()
	Di11CC()
	Di01UG()
	Di12CC()
	R11CG()
	DiL01UL()
	RcL00UU()
	DaL12CC()
	Da02UL()
	Di12CU()
	DiL12CU()
	DaL11LG()
	Di10LU()
	RcL02UL()
	R10LU()
	DiL02UL()
	Rc01UL()
	R11LU()
	Da12CG()
	RL11CU()
	Di11UL()
	R00UU()
	RL01UL()
	Da01UL()
	DiL12CG()
	DaL11CU()
	Da02UG()
	Da11LG()
	R11UG()
	Di11LG()
	DaL12UL()
	DaL12LG()
	RL10CU()
	Da10UU()
end molecule types
begin seed species
	Cbl() 1.6920334542073352e+19 # 2.80975332814237e-05mol/L * 6.022e23/mol *1.0L #Cbl #Cbl
	Grb2() 1.999304e+24 #original 3.32mol/L #Grb2 #Grb2
	CG() 8.799287665457942e+21 #original 0.0146119024667186mol/L #CG #CG
	Rc00UU() 3.927004187079568e+23 #original 0.652109629206172mol/L #Rc00UU #Rc00UU
	R00UU() 1.2271888084623665e+22 #original 0.0203784259126929mol/L #R00UU #R00UU
	Di00UU() 9.48536932074195e+22 #original 0.157511944881135mol/L #Di00UU #Di00UU
end seed species
begin observables
	Species L L() #L
	Species Cbl Cbl() #Cbl
	Species Grb2 Grb2() #Grb2
	Species CG CG() #CG
	Species Rc00UU Rc00UU() #Rc00UU
	Species Rc10UU Rc10UU() #Rc10UU
	Species Rc10CU Rc10CU() #Rc10CU
	Species Rc10LU Rc10LU() #Rc10LU
	Species Rc01UU Rc01UU() #Rc01UU
	Species Rc01UG Rc01UG() #Rc01UG
	Species Rc01UL Rc01UL() #Rc01UL
	Species Rc11UU Rc11UU() #Rc11UU
	Species Rc11CU Rc11CU() #Rc11CU
	Species Rc11LU Rc11LU() #Rc11LU
	Species Rc11UG Rc11UG() #Rc11UG
	Species Rc11UL Rc11UL() #Rc11UL
	Species Rc11CG Rc11CG() #Rc11CG
	Species Rc11CC Rc11CC() #Rc11CC
	Species Rc11LG Rc11LG() #Rc11LG
	Species Rc02UU Rc02UU() #Rc02UU
	Species Rc02UG Rc02UG() #Rc02UG
	Species Rc02UL Rc02UL() #Rc02UL
	Species Rc12UU Rc12UU() #Rc12UU
	Species Rc12CU Rc12CU() #Rc12CU
	Species Rc12LU Rc12LU() #Rc12LU
	Species Rc12UG Rc12UG() #Rc12UG
	Species Rc12UL Rc12UL() #Rc12UL
	Species Rc12CG Rc12CG() #Rc12CG
	Species Rc12CC Rc12CC() #Rc12CC
	Species Rc12LG Rc12LG() #Rc12LG
	Species RcL00UU RcL00UU() #RcL00UU
	Species RcL10UU RcL10UU() #RcL10UU
	Species RcL10CU RcL10CU() #RcL10CU
	Species RcL10LU RcL10LU() #RcL10LU
	Species RcL01UU RcL01UU() #RcL01UU
	Species RcL01UG RcL01UG() #RcL01UG
	Species RcL01UL RcL01UL() #RcL01UL
	Species RcL11UU RcL11UU() #RcL11UU
	Species RcL11CU RcL11CU() #RcL11CU
	Species RcL11LU RcL11LU() #RcL11LU
	Species RcL11UG RcL11UG() #RcL11UG
	Species RcL11UL RcL11UL() #RcL11UL
	Species RcL11CG RcL11CG() #RcL11CG
	Species RcL11CC RcL11CC() #RcL11CC
	Species RcL11LG RcL11LG() #RcL11LG
	Species RcL02UU RcL02UU() #RcL02UU
	Species RcL02UG RcL02UG() #RcL02UG
	Species RcL02UL RcL02UL() #RcL02UL
	Species RcL12UU RcL12UU() #RcL12UU
	Species RcL12CU RcL12CU() #RcL12CU
	Species RcL12LU RcL12LU() #RcL12LU
	Species RcL12UG RcL12UG() #RcL12UG
	Species RcL12UL RcL12UL() #RcL12UL
	Species RcL12CG RcL12CG() #RcL12CG
	Species RcL12CC RcL12CC() #RcL12CC
	Species RcL12LG RcL12LG() #RcL12LG
	Species R00UU R00UU() #R00UU
	Species R10UU R10UU() #R10UU
	Species R10CU R10CU() #R10CU
	Species R10LU R10LU() #R10LU
	Species R01UU R01UU() #R01UU
	Species R01UG R01UG() #R01UG
	Species R01UL R01UL() #R01UL
	Species R11UU R11UU() #R11UU
	Species R11CU R11CU() #R11CU
	Species R11LU R11LU() #R11LU
	Species R11UG R11UG() #R11UG
	Species R11UL R11UL() #R11UL
	Species R11CG R11CG() #R11CG
	Species R11CC R11CC() #R11CC
	Species R11LG R11LG() #R11LG
	Species R02UU R02UU() #R02UU
	Species R02UG R02UG() #R02UG
	Species R02UL R02UL() #R02UL
	Species R12UU R12UU() #R12UU
	Species R12CU R12CU() #R12CU
	Species R12LU R12LU() #R12LU
	Species R12UG R12UG() #R12UG
	Species R12UL R12UL() #R12UL
	Species R12CG R12CG() #R12CG
	Species R12CC R12CC() #R12CC
	Species R12LG R12LG() #R12LG
	Species RL00UU RL00UU() #RL00UU
	Species RL10UU RL10UU() #RL10UU
	Species RL10CU RL10CU() #RL10CU
	Species RL10LU RL10LU() #RL10LU
	Species RL01UU RL01UU() #RL01UU
	Species RL01UG RL01UG() #RL01UG
	Species RL01UL RL01UL() #RL01UL
	Species RL11UU RL11UU() #RL11UU
	Species RL11CU RL11CU() #RL11CU
	Species RL11LU RL11LU() #RL11LU
	Species RL11UG RL11UG() #RL11UG
	Species RL11UL RL11UL() #RL11UL
	Species RL11CG RL11CG() #RL11CG
	Species RL11CC RL11CC() #RL11CC
	Species RL11LG RL11LG() #RL11LG
	Species RL02UU RL02UU() #RL02UU
	Species RL02UG RL02UG() #RL02UG
	Species RL02UL RL02UL() #RL02UL
	Species RL12UU RL12UU() #RL12UU
	Species RL12CU RL12CU() #RL12CU
	Species RL12LU RL12LU() #RL12LU
	Species RL12UG RL12UG() #RL12UG
	Species RL12UL RL12UL() #RL12UL
	Species RL12CG RL12CG() #RL12CG
	Species RL12CC RL12CC() #RL12CC
	Species RL12LG RL12LG() #RL12LG
	Species Di00UU Di00UU() #Di00UU
	Species Di10UU Di10UU() #Di10UU
	Species Di10CU Di10CU() #Di10CU
	Species Di10LU Di10LU() #Di10LU
	Species Di01UU Di01UU() #Di01UU
	Species Di01UG Di01UG() #Di01UG
	Species Di01UL Di01UL() #Di01UL
	Species Di11UU Di11UU() #Di11UU
	Species Di11CU Di11CU() #Di11CU
	Species Di11LU Di11LU() #Di11LU
	Species Di11UG Di11UG() #Di11UG
	Species Di11UL Di11UL() #Di11UL
	Species Di11CG Di11CG() #Di11CG
	Species Di11CC Di11CC() #Di11CC
	Species Di11LG Di11LG() #Di11LG
	Species Di02UU Di02UU() #Di02UU
	Species Di02UG Di02UG() #Di02UG
	Species Di02UL Di02UL() #Di02UL
	Species Di12UU Di12UU() #Di12UU
	Species Di12CU Di12CU() #Di12CU
	Species Di12LU Di12LU() #Di12LU
	Species Di12UG Di12UG() #Di12UG
	Species Di12UL Di12UL() #Di12UL
	Species Di12CG Di12CG() #Di12CG
	Species Di12CC Di12CC() #Di12CC
	Species Di12LG Di12LG() #Di12LG
	Species Da00UU Da00UU() #Da00UU
	Species Da10UU Da10UU() #Da10UU
	Species Da10CU Da10CU() #Da10CU
	Species Da10LU Da10LU() #Da10LU
	Species Da01UU Da01UU() #Da01UU
	Species Da01UG Da01UG() #Da01UG
	Species Da01UL Da01UL() #Da01UL
	Species Da11UU Da11UU() #Da11UU
	Species Da11CU Da11CU() #Da11CU
	Species Da11LU Da11LU() #Da11LU
	Species Da11UG Da11UG() #Da11UG
	Species Da11UL Da11UL() #Da11UL
	Species Da11CG Da11CG() #Da11CG
	Species Da11CC Da11CC() #Da11CC
	Species Da11LG Da11LG() #Da11LG
	Species Da02UU Da02UU() #Da02UU
	Species Da02UG Da02UG() #Da02UG
	Species Da02UL Da02UL() #Da02UL
	Species Da12UU Da12UU() #Da12UU
	Species Da12CU Da12CU() #Da12CU
	Species Da12LU Da12LU() #Da12LU
	Species Da12UG Da12UG() #Da12UG
	Species Da12UL Da12UL() #Da12UL
	Species Da12CG Da12CG() #Da12CG
	Species Da12CC Da12CC() #Da12CC
	Species Da12LG Da12LG() #Da12LG
	Species DiL00UU DiL00UU() #DiL00UU
	Species DiL10UU DiL10UU() #DiL10UU
	Species DiL10CU DiL10CU() #DiL10CU
	Species DiL10LU DiL10LU() #DiL10LU
	Species DiL01UU DiL01UU() #DiL01UU
	Species DiL01UG DiL01UG() #DiL01UG
	Species DiL01UL DiL01UL() #DiL01UL
	Species DiL11UU DiL11UU() #DiL11UU
	Species DiL11CU DiL11CU() #DiL11CU
	Species DiL11LU DiL11LU() #DiL11LU
	Species DiL11UG DiL11UG() #DiL11UG
	Species DiL11UL DiL11UL() #DiL11UL
	Species DiL11CG DiL11CG() #DiL11CG
	Species DiL11CC DiL11CC() #DiL11CC
	Species DiL11LG DiL11LG() #DiL11LG
	Species DiL02UU DiL02UU() #DiL02UU
	Species DiL02UG DiL02UG() #DiL02UG
	Species DiL02UL DiL02UL() #DiL02UL
	Species DiL12UU DiL12UU() #DiL12UU
	Species DiL12CU DiL12CU() #DiL12CU
	Species DiL12LU DiL12LU() #DiL12LU
	Species DiL12UG DiL12UG() #DiL12UG
	Species DiL12UL DiL12UL() #DiL12UL
	Species DiL12CG DiL12CG() #DiL12CG
	Species DiL12CC DiL12CC() #DiL12CC
	Species DiL12LG DiL12LG() #DiL12LG
	Species DaL00UU DaL00UU() #DaL00UU
	Species DaL10UU DaL10UU() #DaL10UU
	Species DaL10CU DaL10CU() #DaL10CU
	Species DaL10LU DaL10LU() #DaL10LU
	Species DaL01UU DaL01UU() #DaL01UU
	Species DaL01UG DaL01UG() #DaL01UG
	Species DaL01UL DaL01UL() #DaL01UL
	Species DaL11UU DaL11UU() #DaL11UU
	Species DaL11CU DaL11CU() #DaL11CU
	Species DaL11LU DaL11LU() #DaL11LU
	Species DaL11UG DaL11UG() #DaL11UG
	Species DaL11UL DaL11UL() #DaL11UL
	Species DaL11CG DaL11CG() #DaL11CG
	Species DaL11CC DaL11CC() #DaL11CC
	Species DaL11LG DaL11LG() #DaL11LG
	Species DaL02UU DaL02UU() #DaL02UU
	Species DaL02UG DaL02UG() #DaL02UG
	Species DaL02UL DaL02UL() #DaL02UL
	Species DaL12UU DaL12UU() #DaL12UU
	Species DaL12CU DaL12CU() #DaL12CU
	Species DaL12LU DaL12LU() #DaL12LU
	Species DaL12UG DaL12UG() #DaL12UG
	Species DaL12UL DaL12UL() #DaL12UL
	Species DaL12CG DaL12CG() #DaL12CG
	Species DaL12CC DaL12CC() #DaL12CC
	Species DaL12LG DaL12LG() #DaL12LG
end observables
begin functions
	KcgP() = Kcg/floc
	kucgM() = kucg
	kbcgP() = kucgM/KcgP
	ku45M() = ku45
	K45P() = K45/floc
	kb45P() = ku45M/K45P
	Ub_ar() = Da10CU + Da10LU + Da11CC + Da11CG + Da11CU + Da11LG + Da11LU + Da12CC + Da12CG + Da12CU + Da12LG + Da12LU + DaL10CU + DaL10LU + DaL11CC + DaL11CG + DaL11CU + DaL11LG + DaL11LU + DaL12CC + DaL12CG + DaL12CU + DaL12LG + DaL12LU + Di10CU + Di10LU + Di11CC + Di11CG + Di11CU + Di11LG + Di11LU + Di12CC + Di12CG + Di12CU + Di12LG + Di12LU + DiL10CU + DiL10LU + DiL11CC + DiL11CG + DiL11CU + DiL11LG + DiL11LU + DiL12CC + DiL12CG + DiL12CU + DiL12LG + DiL12LU + R10CU + R10LU + R11CC + R11CG + R11CU + R11LG + R11LU + R12CC + R12CG + R12CU + R12LG + R12LU + RL10CU + RL10LU + RL11CC + RL11CG + RL11CU + RL11LG + RL11LU + RL12CC + RL12CG + RL12CU + RL12LG + RL12LU + Rc10CU + Rc10LU + Rc11CC + Rc11CG + Rc11CU + Rc11LG + Rc11LU + Rc12CC + Rc12CG + Rc12CU + Rc12LG + Rc12LU + RcL10CU + RcL10LU + RcL11CC + RcL11CG + RcL11CU + RcL11LG + RcL11LU + RcL12CC + RcL12CG + RcL12CU + RcL12LG + RcL12LU
	UbNorm_ar() = Ub_ar/(CblFactor*UbMax)
	PY_ar() = Da01UG + Da01UL + Da01UU + 2*Da02UG + 2*Da02UL + 2*Da02UU + Da10CU + Da10LU + Da10UU + 2*Da11CC + 2*Da11CG + 2*Da11CU + 2*Da11LG + 2*Da11LU + 2*Da11UG + 2*Da11UL + 2*Da11UU + 3*Da12CC + 3*Da12CG + 3*Da12CU + 3*Da12LG + 3*Da12LU + 3*Da12UG + 3*Da12UL + 3*Da12UU + DaL01UG + DaL01UL + DaL01UU + 2*DaL02UG + 2*DaL02UL + 2*DaL02UU + DaL10CU + DaL10LU + DaL10UU + 2*DaL11CC + 2*DaL11CG + 2*DaL11CU + 2*DaL11LG + 2*DaL11LU + 2*DaL11UG + 2*DaL11UL + 2*DaL11UU + 3*DaL12CC + 3*DaL12CG + 3*DaL12CU + 3*DaL12LG + 3*DaL12LU + 3*DaL12UG + 3*DaL12UL + 3*DaL12UU + Di01UG + Di01UL + Di01UU + 2*Di02UG + 2*Di02UL + 2*Di02UU + Di10CU + Di10LU + Di10UU + 2*Di11CC + 2*Di11CG + 2*Di11CU + 2*Di11LG + 2*Di11LU + 2*Di11UG + 2*Di11UL + 2*Di11UU + 3*Di12CC + 3*Di12CG + 3*Di12CU + 3*Di12LG + 3*Di12LU + 3*Di12UG + 3*Di12UL + 3*Di12UU + DiL01UG + DiL01UL + DiL01UU + 2*DiL02UG + 2*DiL02UL + 2*DiL02UU + DiL10CU + DiL10LU + DiL10UU + 2*DiL11CC + 2*DiL11CG + 2*DiL11CU + 2*DiL11LG + 2*DiL11LU + 2*DiL11UG + 2*DiL11UL + 2*DiL11UU + 3*DiL12CC + 3*DiL12CG + 3*DiL12CU + 3*DiL12LG + 3*DiL12LU + 3*DiL12UG + 3*DiL12UL + 3*DiL12UU + R01UG + R01UL + R01UU + 2*R02UG + 2*R02UL + 2*R02UU + R10CU + R10LU + R10UU + 2*R11CC + 2*R11CG + 2*R11CU + 2*R11LG + 2*R11LU + 2*R11UG + 2*R11UL + 2*R11UU + 3*R12CC + 3*R12CG + 3*R12CU + 3*R12LG + 3*R12LU + 3*R12UG + 3*R12UL + 3*R12UU + RL01UG + RL01UL + RL01UU + 2*RL02UG + 2*RL02UL + 2*RL02UU + RL10CU + RL10LU + RL10UU + 2*RL11CC + 2*RL11CG + 2*RL11CU + 2*RL11LG + 2*RL11LU + 2*RL11UG + 2*RL11UL + 2*RL11UU + 3*RL12CC + 3*RL12CG + 3*RL12CU + 3*RL12LG + 3*RL12LU + 3*RL12UG + 3*RL12UL + 3*RL12UU + Rc01UG + Rc01UL + Rc01UU + 2*Rc02UG + 2*Rc02UL + 2*Rc02UU + Rc10CU + Rc10LU + Rc10UU + 2*Rc11CC + 2*Rc11CG + 2*Rc11CU + 2*Rc11LG + 2*Rc11LU + 2*Rc11UG + 2*Rc11UL + 2*Rc11UU + 3*Rc12CC + 3*Rc12CG + 3*Rc12CU + 3*Rc12LG + 3*Rc12LU + 3*Rc12UG + 3*Rc12UL + 3*Rc12UU + RcL01UG + RcL01UL + RcL01UU + 2*RcL02UG + 2*RcL02UL + 2*RcL02UU + RcL10CU + RcL10LU + RcL10UU + 2*RcL11CC + 2*RcL11CG + 2*RcL11CU + 2*RcL11LG + 2*RcL11LU + 2*RcL11UG + 2*RcL11UL + 2*RcL11UU + 3*RcL12CC + 3*RcL12CG + 3*RcL12CU + 3*RcL12LG + 3*RcL12LU + 3*RcL12UG + 3*RcL12UL + 3*RcL12UU
	PYNorm_ar() = PY_ar/PYMax
	ku68M() = ku45M
	kb68P() = kb45P
	kb45() = ku45/K45
	kb68() = kb45
	Ke1() = K*Ke/K1
	k1o() = k1c/Ke1
	SumML_ar() = RL00UU + RL01UG + RL01UL + RL01UU + RL02UG + RL02UL + RL02UU + RL10CU + RL10LU + RL10UU + RL11CC + RL11CG + RL11CU + RL11LG + RL11LU + RL11UG + RL11UL + RL11UU + RL12CC + RL12CG + RL12CU + RL12LG + RL12LU + RL12UG + RL12UL + RL12UU
	SumM_ar() = R00UU + R01UG + R01UL + R01UU + R02UG + R02UL + R02UU + R10CU + R10LU + R10UU + R11CC + R11CG + R11CU + R11LG + R11LU + R11UG + R11UL + R11UU + R12CC + R12CG + R12CU + R12LG + R12LU + R12UG + R12UL + R12UU
	kbcg() = kucg/Kcg
	ku68() = ku45
	kptp68() = kptp
	kkin68() = kkin
	k1b() = k1u/K1
	ko() = kc/Ke
	ku() = K*kb
	fRate8() = 2.0*kptp68
	fRate12() = 2.0*kptp68
	fRate13() = 2.0*kptp68
	fRate14() = 2.0*kptp68
	fRate30() = 2.0*kptp68
	fRate34() = 2.0*kptp68
	fRate35() = 2.0*kptp68
	fRate36() = 2.0*kptp68
	fRate52() = 2.0*kptp68
	fRate56() = 2.0*kptp68
	fRate57() = 2.0*kptp68
	fRate58() = 2.0*kptp68
	fRate74() = 2.0*kptp68
	fRate78() = 2.0*kptp68
	fRate79() = 2.0*kptp68
	fRate80() = 2.0*kptp68
	fRate96() = 2.0*kptp68
	fRate100() = 2.0*kptp68
	fRate101() = 2.0*kptp68
	fRate102() = 2.0*kptp68
	fRate118() = 2.0*kptp68
	fRate122() = 2.0*kptp68
	fRate123() = 2.0*kptp68
	fRate124() = 2.0*kptp68
	fRate140() = 2.0*kptp68
	fRate144() = 2.0*kptp68
	fRate145() = 2.0*kptp68
	fRate146() = 2.0*kptp68
	fRate162() = 2.0*kptp68
	fRate166() = 2.0*kptp68
	fRate167() = 2.0*kptp68
	fRate168() = 2.0*kptp68
	fRate177() = 2.0*kkin68
	fRate178() = 2.0*kkin68
	fRate179() = 2.0*kkin68
	fRate180() = 2.0*kkin68
	fRate199() = 2.0*kkin68
	fRate200() = 2.0*kkin68
	fRate201() = 2.0*kkin68
	fRate202() = 2.0*kkin68
	fRate262() = 2.0*kb68
	fRate264() = 2.0*kb68
	fRate272() = 2.0*kb68
	fRate274() = 2.0*kb68
	fRate278() = 2.0*kb68
	fRate280() = 2.0*kb68
	fRate282() = 2.0*kb68P
	fRate336() = 2.0*kb68
	fRate338() = 2.0*kb68
	fRate346() = 2.0*kb68
	fRate348() = 2.0*kb68
	fRate352() = 2.0*kb68
	fRate354() = 2.0*kb68
	fRate356() = 2.0*kb68P
	fRate410() = 2.0*kb68
	fRate412() = 2.0*kb68
	fRate420() = 2.0*kb68
	fRate422() = 2.0*kb68
	fRate426() = 2.0*kb68
	fRate428() = 2.0*kb68
	fRate430() = 2.0*kb68P
	fRate484() = 2.0*kb68
	fRate486() = 2.0*kb68
	fRate494() = 2.0*kb68
	fRate496() = 2.0*kb68
	fRate500() = 2.0*kb68
	fRate502() = 2.0*kb68
	fRate504() = 2.0*kb68P
	fRate558() = 2.0*kb68
	fRate560() = 2.0*kb68
	fRate568() = 2.0*kb68
	fRate570() = 2.0*kb68
	fRate574() = 2.0*kb68
	fRate576() = 2.0*kb68
	fRate578() = 2.0*kb68P
	fRate632() = 2.0*kb68
	fRate634() = 2.0*kb68
	fRate642() = 2.0*kb68
	fRate644() = 2.0*kb68
	fRate648() = 2.0*kb68
	fRate650() = 2.0*kb68
	fRate652() = 2.0*kb68P
	fRate706() = 2.0*kb68
	fRate708() = 2.0*kb68
	fRate716() = 2.0*kb68
	fRate718() = 2.0*kb68
	fRate722() = 2.0*kb68
	fRate724() = 2.0*kb68
	fRate726() = 2.0*kb68P
	fRate780() = 2.0*kb68
	fRate782() = 2.0*kb68
	fRate790() = 2.0*kb68
	fRate792() = 2.0*kb68
	fRate796() = 2.0*kb68
	fRate798() = 2.0*kb68
	fRate800() = 2.0*kb68P
	fRate970() = L*kb
	fRate971() = L*kb
	fRate972() = L*kb
	fRate973() = L*kb
	fRate974() = L*kb
	fRate975() = L*kb
	fRate976() = L*kb
	fRate977() = L*kb
	fRate978() = L*kb
	fRate979() = L*kb
	fRate980() = L*kb
	fRate981() = L*kb
	fRate982() = L*kb
	fRate983() = L*kb
	fRate984() = L*kb
	fRate985() = L*kb
	fRate986() = L*kb
	fRate987() = L*kb
	fRate988() = L*kb
	fRate989() = L*kb
	fRate990() = L*kb
	fRate991() = L*kb
	fRate992() = L*kb
	fRate993() = L*kb
	fRate994() = L*kb
	fRate995() = L*kb
	fRate1048() = L*kb
	fRate1049() = L*kb
	fRate1050() = L*kb
	fRate1051() = L*kb
	fRate1052() = L*kb
	fRate1053() = L*kb
	fRate1054() = L*kb
	fRate1055() = L*kb
	fRate1056() = L*kb
	fRate1057() = L*kb
	fRate1058() = L*kb
	fRate1059() = L*kb
	fRate1060() = L*kb
	fRate1061() = L*kb
	fRate1062() = L*kb
	fRate1063() = L*kb
	fRate1064() = L*kb
	fRate1065() = L*kb
	fRate1066() = L*kb
	fRate1067() = L*kb
	fRate1068() = L*kb
	fRate1069() = L*kb
	fRate1070() = L*kb
	fRate1071() = L*kb
	fRate1072() = L*kb
	fRate1073() = L*kb
	fRate1230() = SumM_ar*kbDIM
	fRate1231() = SumM_ar*kbDIM
	fRate1232() = SumM_ar*kbDIM
	fRate1233() = SumM_ar*kbDIM
	fRate1234() = SumM_ar*kbDIM
	fRate1235() = SumM_ar*kbDIM
	fRate1236() = SumM_ar*kbDIM
	fRate1237() = SumM_ar*kbDIM
	fRate1238() = SumM_ar*kbDIM
	fRate1239() = SumM_ar*kbDIM
	fRate1240() = SumM_ar*kbDIM
	fRate1241() = SumM_ar*kbDIM
	fRate1242() = SumM_ar*kbDIM
	fRate1243() = SumM_ar*kbDIM
	fRate1244() = SumM_ar*kbDIM
	fRate1245() = SumM_ar*kbDIM
	fRate1246() = SumM_ar*kbDIM
	fRate1247() = SumM_ar*kbDIM
	fRate1248() = SumM_ar*kbDIM
	fRate1249() = SumM_ar*kbDIM
	fRate1250() = SumM_ar*kbDIM
	fRate1251() = SumM_ar*kbDIM
	fRate1252() = SumM_ar*kbDIM
	fRate1253() = SumM_ar*kbDIM
	fRate1254() = SumM_ar*kbDIM
	fRate1255() = SumM_ar*kbDIM
	fRate1256() = SumML_ar*kbDIM
	fRate1257() = SumML_ar*kbDIM
	fRate1258() = SumML_ar*kbDIM
	fRate1259() = SumML_ar*kbDIM
	fRate1260() = SumML_ar*kbDIM
	fRate1261() = SumML_ar*kbDIM
	fRate1262() = SumML_ar*kbDIM
	fRate1263() = SumML_ar*kbDIM
	fRate1264() = SumML_ar*kbDIM
	fRate1265() = SumML_ar*kbDIM
	fRate1266() = SumML_ar*kbDIM
	fRate1267() = SumML_ar*kbDIM
	fRate1268() = SumML_ar*kbDIM
	fRate1269() = SumML_ar*kbDIM
	fRate1270() = SumML_ar*kbDIM
	fRate1271() = SumML_ar*kbDIM
	fRate1272() = SumML_ar*kbDIM
	fRate1273() = SumML_ar*kbDIM
	fRate1274() = SumML_ar*kbDIM
	fRate1275() = SumML_ar*kbDIM
	fRate1276() = SumML_ar*kbDIM
	fRate1277() = SumML_ar*kbDIM
	fRate1278() = SumML_ar*kbDIM
	fRate1279() = SumML_ar*kbDIM
	fRate1280() = SumML_ar*kbDIM
	fRate1281() = SumML_ar*kbDIM
	fRate1282() = SumM_ar*kbDIM
	fRate1283() = SumM_ar*kbDIM
	fRate1284() = SumM_ar*kbDIM
	fRate1285() = SumM_ar*kbDIM
	fRate1286() = SumM_ar*kbDIM
	fRate1287() = SumM_ar*kbDIM
	fRate1288() = SumM_ar*kbDIM
	fRate1289() = SumM_ar*kbDIM
	fRate1290() = SumM_ar*kbDIM
	fRate1291() = SumM_ar*kbDIM
	fRate1292() = SumM_ar*kbDIM
	fRate1293() = SumM_ar*kbDIM
	fRate1294() = SumM_ar*kbDIM
	fRate1295() = SumM_ar*kbDIM
	fRate1296() = SumM_ar*kbDIM
	fRate1297() = SumM_ar*kbDIM
	fRate1298() = SumM_ar*kbDIM
	fRate1299() = SumM_ar*kbDIM
	fRate1300() = SumM_ar*kbDIM
	fRate1301() = SumM_ar*kbDIM
	fRate1302() = SumM_ar*kbDIM
	fRate1303() = SumM_ar*kbDIM
	fRate1304() = SumM_ar*kbDIM
	fRate1305() = SumM_ar*kbDIM
	fRate1306() = SumM_ar*kbDIM
	fRate1307() = SumM_ar*kbDIM
	fRate1308() = SumML_ar*kbDIM
	fRate1309() = SumML_ar*kbDIM
	fRate1310() = SumML_ar*kbDIM
	fRate1311() = SumML_ar*kbDIM
	fRate1312() = SumML_ar*kbDIM
	fRate1313() = SumML_ar*kbDIM
	fRate1314() = SumML_ar*kbDIM
	fRate1315() = SumML_ar*kbDIM
	fRate1316() = SumML_ar*kbDIM
	fRate1317() = SumML_ar*kbDIM
	fRate1318() = SumML_ar*kbDIM
	fRate1319() = SumML_ar*kbDIM
	fRate1320() = SumML_ar*kbDIM
	fRate1321() = SumML_ar*kbDIM
	fRate1322() = SumML_ar*kbDIM
	fRate1323() = SumML_ar*kbDIM
	fRate1324() = SumML_ar*kbDIM
	fRate1325() = SumML_ar*kbDIM
	fRate1326() = SumML_ar*kbDIM
	fRate1327() = SumML_ar*kbDIM
	fRate1328() = SumML_ar*kbDIM
	fRate1329() = SumML_ar*kbDIM
	fRate1330() = SumML_ar*kbDIM
	fRate1331() = SumML_ar*kbDIM
	fRate1332() = SumML_ar*kbDIM
	fRate1333() = SumML_ar*kbDIM
	fRate1438() = R00UU*kbDIM
	fRate1439() = R10UU*kbDIM
	fRate1440() = R10CU*kbDIM
	fRate1441() = R10LU*kbDIM
	fRate1442() = R01UU*kbDIM
	fRate1443() = R01UG*kbDIM
	fRate1444() = R01UL*kbDIM
	fRate1445() = R11UU*kbDIM
	fRate1446() = R11CU*kbDIM
	fRate1447() = R11LU*kbDIM
	fRate1448() = R11UG*kbDIM
	fRate1449() = R11UL*kbDIM
	fRate1450() = R11CG*kbDIM
	fRate1451() = R11CC*kbDIM
	fRate1452() = R11LG*kbDIM
	fRate1453() = R02UU*kbDIM
	fRate1454() = R02UG*kbDIM
	fRate1455() = R02UL*kbDIM
	fRate1456() = R12UU*kbDIM
	fRate1457() = R12CU*kbDIM
	fRate1458() = R12LU*kbDIM
	fRate1459() = R12UG*kbDIM
	fRate1460() = R12UL*kbDIM
	fRate1461() = R12CG*kbDIM
	fRate1462() = R12CC*kbDIM
	fRate1463() = R12LG*kbDIM
	fRate1464() = RL00UU*kbDIM
	fRate1465() = RL10UU*kbDIM
	fRate1466() = RL10CU*kbDIM
	fRate1467() = RL10LU*kbDIM
	fRate1468() = RL01UU*kbDIM
	fRate1469() = RL01UG*kbDIM
	fRate1470() = RL01UL*kbDIM
	fRate1471() = RL11UU*kbDIM
	fRate1472() = RL11CU*kbDIM
	fRate1473() = RL11LU*kbDIM
	fRate1474() = RL11UG*kbDIM
	fRate1475() = RL11UL*kbDIM
	fRate1476() = RL11CG*kbDIM
	fRate1477() = RL11CC*kbDIM
	fRate1478() = RL11LG*kbDIM
	fRate1479() = RL02UU*kbDIM
	fRate1480() = RL02UG*kbDIM
	fRate1481() = RL02UL*kbDIM
	fRate1482() = RL12UU*kbDIM
	fRate1483() = RL12CU*kbDIM
	fRate1484() = RL12LU*kbDIM
	fRate1485() = RL12UG*kbDIM
	fRate1486() = RL12UL*kbDIM
	fRate1487() = RL12CG*kbDIM
	fRate1488() = RL12CC*kbDIM
	fRate1489() = RL12LG*kbDIM
end functions
begin reaction rules
	r1: Rc10UU() -> Rc00UU() kptp #Modifiers(Rc10UU)
	r2: Rc01UU() -> Rc00UU() kptp68 #Modifiers(Rc01UU)
	r3: Rc11UU() -> Rc01UU() kptp #Modifiers(Rc11UU)
	r4: Rc11UU() -> Rc10UU() kptp68 #Modifiers(Rc11UU)
	r5: Rc11CU() -> Rc10CU() kptp68 #Modifiers(Rc11CU)
	r6: Rc11LU() -> Rc10LU() kptp68 #Modifiers(Rc11LU)
	r7: Rc11UG() -> Rc01UG() kptp #Modifiers(Rc11UG)
	r8: Rc11UL() -> Rc01UL() kptp #Modifiers(Rc11UL)
	r9: Rc02UU() -> Rc01UU() fRate8() #Modifiers(Rc02UU)
	r10: Rc02UG() -> Rc01UG() kptp68 #Modifiers(Rc02UG)
	r11: Rc02UL() -> Rc01UL() kptp68 #Modifiers(Rc02UL)
	r12: Rc12UU() -> Rc02UU() kptp #Modifiers(Rc12UU)
	r13: Rc12UU() -> Rc11UU() fRate12() #Modifiers(Rc12UU)
	r14: Rc12CU() -> Rc11CU() fRate13() #Modifiers(Rc12CU)
	r15: Rc12LU() -> Rc11LU() fRate14() #Modifiers(Rc12LU)
	r16: Rc12UG() -> Rc02UG() kptp #Modifiers(Rc12UG)
	r17: Rc12UG() -> Rc11UG() kptp68 #Modifiers(Rc12UG)
	r18: Rc12UL() -> Rc02UL() kptp #Modifiers(Rc12UL)
	r19: Rc12UL() -> Rc11UL() kptp68 #Modifiers(Rc12UL)
	r20: Rc12CG() -> Rc11CG() kptp68 #Modifiers(Rc12CG)
	r21: Rc12CC() -> Rc11CC() kptp68 #Modifiers(Rc12CC)
	r22: Rc12LG() -> Rc11LG() kptp68 #Modifiers(Rc12LG)
	r23: RcL10UU() -> RcL00UU() kptp #Modifiers(RcL10UU)
	r24: RcL01UU() -> RcL00UU() kptp68 #Modifiers(RcL01UU)
	r25: RcL11UU() -> RcL01UU() kptp #Modifiers(RcL11UU)
	r26: RcL11UU() -> RcL10UU() kptp68 #Modifiers(RcL11UU)
	r27: RcL11CU() -> RcL10CU() kptp68 #Modifiers(RcL11CU)
	r28: RcL11LU() -> RcL10LU() kptp68 #Modifiers(RcL11LU)
	r29: RcL11UG() -> RcL01UG() kptp #Modifiers(RcL11UG)
	r30: RcL11UL() -> RcL01UL() kptp #Modifiers(RcL11UL)
	r31: RcL02UU() -> RcL01UU() fRate30() #Modifiers(RcL02UU)
	r32: RcL02UG() -> RcL01UG() kptp68 #Modifiers(RcL02UG)
	r33: RcL02UL() -> RcL01UL() kptp68 #Modifiers(RcL02UL)
	r34: RcL12UU() -> RcL02UU() kptp #Modifiers(RcL12UU)
	r35: RcL12UU() -> RcL11UU() fRate34() #Modifiers(RcL12UU)
	r36: RcL12CU() -> RcL11CU() fRate35() #Modifiers(RcL12CU)
	r37: RcL12LU() -> RcL11LU() fRate36() #Modifiers(RcL12LU)
	r38: RcL12UG() -> RcL02UG() kptp #Modifiers(RcL12UG)
	r39: RcL12UG() -> RcL11UG() kptp68 #Modifiers(RcL12UG)
	r40: RcL12UL() -> RcL02UL() kptp #Modifiers(RcL12UL)
	r41: RcL12UL() -> RcL11UL() kptp68 #Modifiers(RcL12UL)
	r42: RcL12CG() -> RcL11CG() kptp68 #Modifiers(RcL12CG)
	r43: RcL12CC() -> RcL11CC() kptp68 #Modifiers(RcL12CC)
	r44: RcL12LG() -> RcL11LG() kptp68 #Modifiers(RcL12LG)
	r45: R10UU() -> R00UU() kptp #Modifiers(R10UU)
	r46: R01UU() -> R00UU() kptp68 #Modifiers(R01UU)
	r47: R11UU() -> R01UU() kptp #Modifiers(R11UU)
	r48: R11UU() -> R10UU() kptp68 #Modifiers(R11UU)
	r49: R11CU() -> R10CU() kptp68 #Modifiers(R11CU)
	r50: R11LU() -> R10LU() kptp68 #Modifiers(R11LU)
	r51: R11UG() -> R01UG() kptp #Modifiers(R11UG)
	r52: R11UL() -> R01UL() kptp #Modifiers(R11UL)
	r53: R02UU() -> R01UU() fRate52() #Modifiers(R02UU)
	r54: R02UG() -> R01UG() kptp68 #Modifiers(R02UG)
	r55: R02UL() -> R01UL() kptp68 #Modifiers(R02UL)
	r56: R12UU() -> R02UU() kptp #Modifiers(R12UU)
	r57: R12UU() -> R11UU() fRate56() #Modifiers(R12UU)
	r58: R12CU() -> R11CU() fRate57() #Modifiers(R12CU)
	r59: R12LU() -> R11LU() fRate58() #Modifiers(R12LU)
	r60: R12UG() -> R02UG() kptp #Modifiers(R12UG)
	r61: R12UG() -> R11UG() kptp68 #Modifiers(R12UG)
	r62: R12UL() -> R02UL() kptp #Modifiers(R12UL)
	r63: R12UL() -> R11UL() kptp68 #Modifiers(R12UL)
	r64: R12CG() -> R11CG() kptp68 #Modifiers(R12CG)
	r65: R12CC() -> R11CC() kptp68 #Modifiers(R12CC)
	r66: R12LG() -> R11LG() kptp68 #Modifiers(R12LG)
	r67: RL10UU() -> RL00UU() kptp #Modifiers(RL10UU)
	r68: RL01UU() -> RL00UU() kptp68 #Modifiers(RL01UU)
	r69: RL11UU() -> RL01UU() kptp #Modifiers(RL11UU)
	r70: RL11UU() -> RL10UU() kptp68 #Modifiers(RL11UU)
	r71: RL11CU() -> RL10CU() kptp68 #Modifiers(RL11CU)
	r72: RL11LU() -> RL10LU() kptp68 #Modifiers(RL11LU)
	r73: RL11UG() -> RL01UG() kptp #Modifiers(RL11UG)
	r74: RL11UL() -> RL01UL() kptp #Modifiers(RL11UL)
	r75: RL02UU() -> RL01UU() fRate74() #Modifiers(RL02UU)
	r76: RL02UG() -> RL01UG() kptp68 #Modifiers(RL02UG)
	r77: RL02UL() -> RL01UL() kptp68 #Modifiers(RL02UL)
	r78: RL12UU() -> RL02UU() kptp #Modifiers(RL12UU)
	r79: RL12UU() -> RL11UU() fRate78() #Modifiers(RL12UU)
	r80: RL12CU() -> RL11CU() fRate79() #Modifiers(RL12CU)
	r81: RL12LU() -> RL11LU() fRate80() #Modifiers(RL12LU)
	r82: RL12UG() -> RL02UG() kptp #Modifiers(RL12UG)
	r83: RL12UG() -> RL11UG() kptp68 #Modifiers(RL12UG)
	r84: RL12UL() -> RL02UL() kptp #Modifiers(RL12UL)
	r85: RL12UL() -> RL11UL() kptp68 #Modifiers(RL12UL)
	r86: RL12CG() -> RL11CG() kptp68 #Modifiers(RL12CG)
	r87: RL12CC() -> RL11CC() kptp68 #Modifiers(RL12CC)
	r88: RL12LG() -> RL11LG() kptp68 #Modifiers(RL12LG)
	r89: Di10UU() -> Di00UU() kptp #Modifiers(Di10UU)
	r90: Di01UU() -> Di00UU() kptp68 #Modifiers(Di01UU)
	r91: Di11UU() -> Di01UU() kptp #Modifiers(Di11UU)
	r92: Di11UU() -> Di10UU() kptp68 #Modifiers(Di11UU)
	r93: Di11CU() -> Di10CU() kptp68 #Modifiers(Di11CU)
	r94: Di11LU() -> Di10LU() kptp68 #Modifiers(Di11LU)
	r95: Di11UG() -> Di01UG() kptp #Modifiers(Di11UG)
	r96: Di11UL() -> Di01UL() kptp #Modifiers(Di11UL)
	r97: Di02UU() -> Di01UU() fRate96() #Modifiers(Di02UU)
	r98: Di02UG() -> Di01UG() kptp68 #Modifiers(Di02UG)
	r99: Di02UL() -> Di01UL() kptp68 #Modifiers(Di02UL)
	r100: Di12UU() -> Di02UU() kptp #Modifiers(Di12UU)
	r101: Di12UU() -> Di11UU() fRate100() #Modifiers(Di12UU)
	r102: Di12CU() -> Di11CU() fRate101() #Modifiers(Di12CU)
	r103: Di12LU() -> Di11LU() fRate102() #Modifiers(Di12LU)
	r104: Di12UG() -> Di02UG() kptp #Modifiers(Di12UG)
	r105: Di12UG() -> Di11UG() kptp68 #Modifiers(Di12UG)
	r106: Di12UL() -> Di02UL() kptp #Modifiers(Di12UL)
	r107: Di12UL() -> Di11UL() kptp68 #Modifiers(Di12UL)
	r108: Di12CG() -> Di11CG() kptp68 #Modifiers(Di12CG)
	r109: Di12CC() -> Di11CC() kptp68 #Modifiers(Di12CC)
	r110: Di12LG() -> Di11LG() kptp68 #Modifiers(Di12LG)
	r111: Da10UU() -> Da00UU() kptp #Modifiers(Da10UU)
	r112: Da01UU() -> Da00UU() kptp68 #Modifiers(Da01UU)
	r113: Da11UU() -> Da01UU() kptp #Modifiers(Da11UU)
	r114: Da11UU() -> Da10UU() kptp68 #Modifiers(Da11UU)
	r115: Da11CU() -> Da10CU() kptp68 #Modifiers(Da11CU)
	r116: Da11LU() -> Da10LU() kptp68 #Modifiers(Da11LU)
	r117: Da11UG() -> Da01UG() kptp #Modifiers(Da11UG)
	r118: Da11UL() -> Da01UL() kptp #Modifiers(Da11UL)
	r119: Da02UU() -> Da01UU() fRate118() #Modifiers(Da02UU)
	r120: Da02UG() -> Da01UG() kptp68 #Modifiers(Da02UG)
	r121: Da02UL() -> Da01UL() kptp68 #Modifiers(Da02UL)
	r122: Da12UU() -> Da02UU() kptp #Modifiers(Da12UU)
	r123: Da12UU() -> Da11UU() fRate122() #Modifiers(Da12UU)
	r124: Da12CU() -> Da11CU() fRate123() #Modifiers(Da12CU)
	r125: Da12LU() -> Da11LU() fRate124() #Modifiers(Da12LU)
	r126: Da12UG() -> Da02UG() kptp #Modifiers(Da12UG)
	r127: Da12UG() -> Da11UG() kptp68 #Modifiers(Da12UG)
	r128: Da12UL() -> Da02UL() kptp #Modifiers(Da12UL)
	r129: Da12UL() -> Da11UL() kptp68 #Modifiers(Da12UL)
	r130: Da12CG() -> Da11CG() kptp68 #Modifiers(Da12CG)
	r131: Da12CC() -> Da11CC() kptp68 #Modifiers(Da12CC)
	r132: Da12LG() -> Da11LG() kptp68 #Modifiers(Da12LG)
	r133: DiL10UU() -> DiL00UU() kptp #Modifiers(DiL10UU)
	r134: DiL01UU() -> DiL00UU() kptp68 #Modifiers(DiL01UU)
	r135: DiL11UU() -> DiL01UU() kptp #Modifiers(DiL11UU)
	r136: DiL11UU() -> DiL10UU() kptp68 #Modifiers(DiL11UU)
	r137: DiL11CU() -> DiL10CU() kptp68 #Modifiers(DiL11CU)
	r138: DiL11LU() -> DiL10LU() kptp68 #Modifiers(DiL11LU)
	r139: DiL11UG() -> DiL01UG() kptp #Modifiers(DiL11UG)
	r140: DiL11UL() -> DiL01UL() kptp #Modifiers(DiL11UL)
	r141: DiL02UU() -> DiL01UU() fRate140() #Modifiers(DiL02UU)
	r142: DiL02UG() -> DiL01UG() kptp68 #Modifiers(DiL02UG)
	r143: DiL02UL() -> DiL01UL() kptp68 #Modifiers(DiL02UL)
	r144: DiL12UU() -> DiL02UU() kptp #Modifiers(DiL12UU)
	r145: DiL12UU() -> DiL11UU() fRate144() #Modifiers(DiL12UU)
	r146: DiL12CU() -> DiL11CU() fRate145() #Modifiers(DiL12CU)
	r147: DiL12LU() -> DiL11LU() fRate146() #Modifiers(DiL12LU)
	r148: DiL12UG() -> DiL02UG() kptp #Modifiers(DiL12UG)
	r149: DiL12UG() -> DiL11UG() kptp68 #Modifiers(DiL12UG)
	r150: DiL12UL() -> DiL02UL() kptp #Modifiers(DiL12UL)
	r151: DiL12UL() -> DiL11UL() kptp68 #Modifiers(DiL12UL)
	r152: DiL12CG() -> DiL11CG() kptp68 #Modifiers(DiL12CG)
	r153: DiL12CC() -> DiL11CC() kptp68 #Modifiers(DiL12CC)
	r154: DiL12LG() -> DiL11LG() kptp68 #Modifiers(DiL12LG)
	r155: DaL10UU() -> DaL00UU() kptp #Modifiers(DaL10UU)
	r156: DaL01UU() -> DaL00UU() kptp68 #Modifiers(DaL01UU)
	r157: DaL11UU() -> DaL01UU() kptp #Modifiers(DaL11UU)
	r158: DaL11UU() -> DaL10UU() kptp68 #Modifiers(DaL11UU)
	r159: DaL11CU() -> DaL10CU() kptp68 #Modifiers(DaL11CU)
	r160: DaL11LU() -> DaL10LU() kptp68 #Modifiers(DaL11LU)
	r161: DaL11UG() -> DaL01UG() kptp #Modifiers(DaL11UG)
	r162: DaL11UL() -> DaL01UL() kptp #Modifiers(DaL11UL)
	r163: DaL02UU() -> DaL01UU() fRate162() #Modifiers(DaL02UU)
	r164: DaL02UG() -> DaL01UG() kptp68 #Modifiers(DaL02UG)
	r165: DaL02UL() -> DaL01UL() kptp68 #Modifiers(DaL02UL)
	r166: DaL12UU() -> DaL02UU() kptp #Modifiers(DaL12UU)
	r167: DaL12UU() -> DaL11UU() fRate166() #Modifiers(DaL12UU)
	r168: DaL12CU() -> DaL11CU() fRate167() #Modifiers(DaL12CU)
	r169: DaL12LU() -> DaL11LU() fRate168() #Modifiers(DaL12LU)
	r170: DaL12UG() -> DaL02UG() kptp #Modifiers(DaL12UG)
	r171: DaL12UG() -> DaL11UG() kptp68 #Modifiers(DaL12UG)
	r172: DaL12UL() -> DaL02UL() kptp #Modifiers(DaL12UL)
	r173: DaL12UL() -> DaL11UL() kptp68 #Modifiers(DaL12UL)
	r174: DaL12CG() -> DaL11CG() kptp68 #Modifiers(DaL12CG)
	r175: DaL12CC() -> DaL11CC() kptp68 #Modifiers(DaL12CC)
	r176: DaL12LG() -> DaL11LG() kptp68 #Modifiers(DaL12LG)
	r177: Da00UU() -> Da10UU() kkin #Modifiers(Da00UU)
	r178: Da00UU() -> Da01UU() fRate177() #Modifiers(Da00UU)
	r179: Da10UU() -> Da11UU() fRate178() #Modifiers(Da10UU)
	r180: Da10CU() -> Da11CU() fRate179() #Modifiers(Da10CU)
	r181: Da10LU() -> Da11LU() fRate180() #Modifiers(Da10LU)
	r182: Da01UU() -> Da11UU() kkin #Modifiers(Da01UU)
	r183: Da01UU() -> Da02UU() kkin68 #Modifiers(Da01UU)
	r184: Da01UG() -> Da11UG() kkin #Modifiers(Da01UG)
	r185: Da01UG() -> Da02UG() kkin68 #Modifiers(Da01UG)
	r186: Da01UL() -> Da11UL() kkin #Modifiers(Da01UL)
	r187: Da01UL() -> Da02UL() kkin68 #Modifiers(Da01UL)
	r188: Da11UU() -> Da12UU() kkin68 #Modifiers(Da11UU)
	r189: Da11CU() -> Da12CU() kkin68 #Modifiers(Da11CU)
	r190: Da11LU() -> Da12LU() kkin68 #Modifiers(Da11LU)
	r191: Da11UG() -> Da12UG() kkin68 #Modifiers(Da11UG)
	r192: Da11UL() -> Da12UL() kkin68 #Modifiers(Da11UL)
	r193: Da11CG() -> Da12CG() kkin68 #Modifiers(Da11CG)
	r194: Da11CC() -> Da12CC() kkin68 #Modifiers(Da11CC)
	r195: Da11LG() -> Da12LG() kkin68 #Modifiers(Da11LG)
	r196: Da02UU() -> Da12UU() kkin #Modifiers(Da02UU)
	r197: Da02UG() -> Da12UG() kkin #Modifiers(Da02UG)
	r198: Da02UL() -> Da12UL() kkin #Modifiers(Da02UL)
	r199: DaL00UU() -> DaL10UU() kkin #Modifiers(DaL00UU)
	r200: DaL00UU() -> DaL01UU() fRate199() #Modifiers(DaL00UU)
	r201: DaL10UU() -> DaL11UU() fRate200() #Modifiers(DaL10UU)
	r202: DaL10CU() -> DaL11CU() fRate201() #Modifiers(DaL10CU)
	r203: DaL10LU() -> DaL11LU() fRate202() #Modifiers(DaL10LU)
	r204: DaL01UU() -> DaL11UU() kkin #Modifiers(DaL01UU)
	r205: DaL01UU() -> DaL02UU() kkin68 #Modifiers(DaL01UU)
	r206: DaL01UG() -> DaL11UG() kkin #Modifiers(DaL01UG)
	r207: DaL01UG() -> DaL02UG() kkin68 #Modifiers(DaL01UG)
	r208: DaL01UL() -> DaL11UL() kkin #Modifiers(DaL01UL)
	r209: DaL01UL() -> DaL02UL() kkin68 #Modifiers(DaL01UL)
	r210: DaL11UU() -> DaL12UU() kkin68 #Modifiers(DaL11UU)
	r211: DaL11CU() -> DaL12CU() kkin68 #Modifiers(DaL11CU)
	r212: DaL11LU() -> DaL12LU() kkin68 #Modifiers(DaL11LU)
	r213: DaL11UG() -> DaL12UG() kkin68 #Modifiers(DaL11UG)
	r214: DaL11UL() -> DaL12UL() kkin68 #Modifiers(DaL11UL)
	r215: DaL11CG() -> DaL12CG() kkin68 #Modifiers(DaL11CG)
	r216: DaL11CC() -> DaL12CC() kkin68 #Modifiers(DaL11CC)
	r217: DaL11LG() -> DaL12LG() kkin68 #Modifiers(DaL11LG)
	r218: DaL02UU() -> DaL12UU() kkin #Modifiers(DaL02UU)
	r219: DaL02UG() -> DaL12UG() kkin #Modifiers(DaL02UG)
	r220: DaL02UL() -> DaL12UL() kkin #Modifiers(DaL02UL)
	r221: Cbl() + Grb2() -> CG() kbcg #Modifiers(Cbl, Grb2)
	r222: CG() -> Cbl() + Grb2() kucg #Modifiers(CG)
	r223: Cbl() + Rc10UU() -> Rc10CU() kb45 #Modifiers(Cbl, Rc10UU)
	r224: Rc10CU() -> Cbl() + Rc10UU() ku45 #Modifiers(Rc10CU)
	r225: CG() + Rc10UU() -> Rc10LU() kb45 #Modifiers(CG, Rc10UU)
	r226: Rc10LU() -> CG() + Rc10UU() ku45 #Modifiers(Rc10LU)
	r227: Grb2() + Rc10CU() -> Rc10LU() kbcg #Modifiers(Grb2, Rc10CU)
	r228: Rc10LU() -> Grb2() + Rc10CU() kucg #Modifiers(Rc10LU)
	r229: Grb2() + Rc01UU() -> Rc01UG() kb68 #Modifiers(Grb2, Rc01UU)
	r230: Rc01UG() -> Grb2() + Rc01UU() ku68 #Modifiers(Rc01UG)
	r231: CG() + Rc01UU() -> Rc01UL() kb68 #Modifiers(CG, Rc01UU)
	r232: Rc01UL() -> CG() + Rc01UU() ku68 #Modifiers(Rc01UL)
	r233: Cbl() + Rc01UG() -> Rc01UL() kbcg #Modifiers(Cbl, Rc01UG)
	r234: Rc01UL() -> Cbl() + Rc01UG() kucg #Modifiers(Rc01UL)
	r235: Cbl() + Rc11UU() -> Rc11CU() kb45 #Modifiers(Cbl, Rc11UU)
	r236: Rc11CU() -> Cbl() + Rc11UU() ku45 #Modifiers(Rc11CU)
	r237: CG() + Rc11UU() -> Rc11LU() kb45 #Modifiers(CG, Rc11UU)
	r238: Rc11LU() -> CG() + Rc11UU() ku45 #Modifiers(Rc11LU)
	r239: Grb2() + Rc11UU() -> Rc11UG() kb68 #Modifiers(Grb2, Rc11UU)
	r240: Rc11UG() -> Grb2() + Rc11UU() ku68 #Modifiers(Rc11UG)
	r241: CG() + Rc11UU() -> Rc11UL() kb68 #Modifiers(CG, Rc11UU)
	r242: Rc11UL() -> CG() + Rc11UU() ku68 #Modifiers(Rc11UL)
	r243: Grb2() + Rc11CU() -> Rc11LU() kbcg #Modifiers(Grb2, Rc11CU)
	r244: Rc11LU() -> Grb2() + Rc11CU() kucg #Modifiers(Rc11LU)
	r245: Grb2() + Rc11CU() -> Rc11CG() kb68 #Modifiers(Grb2, Rc11CU)
	r246: Rc11CG() -> Grb2() + Rc11CU() ku68 #Modifiers(Rc11CG)
	r247: Grb2() + Rc11LU() -> Rc11LG() kb68 #Modifiers(Grb2, Rc11LU)
	r248: Rc11LG() -> Grb2() + Rc11LU() ku68 #Modifiers(Rc11LG)
	r249: Rc11LU() -> Rc11CC() kb68P #Modifiers(Rc11LU)
	r250: Rc11CC() -> Rc11LU() ku68M #Modifiers(Rc11CC)
	r251: Cbl() + Rc11UG() -> Rc11CG() kb45 #Modifiers(Cbl, Rc11UG)
	r252: Rc11CG() -> Cbl() + Rc11UG() ku45 #Modifiers(Rc11CG)
	r253: CG() + Rc11UG() -> Rc11LG() kb45 #Modifiers(CG, Rc11UG)
	r254: Rc11LG() -> CG() + Rc11UG() ku45 #Modifiers(Rc11LG)
	r255: Cbl() + Rc11UG() -> Rc11UL() kbcg #Modifiers(Cbl, Rc11UG)
	r256: Rc11UL() -> Cbl() + Rc11UG() kucg #Modifiers(Rc11UL)
	r257: Rc11UL() -> Rc11CC() kb45P #Modifiers(Rc11UL)
	r258: Rc11CC() -> Rc11UL() ku45M #Modifiers(Rc11CC)
	r259: Rc11CG() -> Rc11CC() kbcgP #Modifiers(Rc11CG)
	r260: Rc11CC() -> Rc11CG() kucgM #Modifiers(Rc11CC)
	r261: Grb2() + Rc11CG() -> Rc11LG() kbcg #Modifiers(Grb2, Rc11CG)
	r262: Rc11LG() -> Grb2() + Rc11CG() kucg #Modifiers(Rc11LG)
	r263: Grb2() + Rc02UU() -> Rc02UG() fRate262() #Modifiers(Grb2, Rc02UU)
	r264: Rc02UG() -> Grb2() + Rc02UU() ku68 #Modifiers(Rc02UG)
	r265: CG() + Rc02UU() -> Rc02UL() fRate264() #Modifiers(CG, Rc02UU)
	r266: Rc02UL() -> CG() + Rc02UU() ku68 #Modifiers(Rc02UL)
	r267: Cbl() + Rc02UG() -> Rc02UL() kbcg #Modifiers(Cbl, Rc02UG)
	r268: Rc02UL() -> Cbl() + Rc02UG() kucg #Modifiers(Rc02UL)
	r269: Cbl() + Rc12UU() -> Rc12CU() kb45 #Modifiers(Cbl, Rc12UU)
	r270: Rc12CU() -> Cbl() + Rc12UU() ku45 #Modifiers(Rc12CU)
	r271: CG() + Rc12UU() -> Rc12LU() kb45 #Modifiers(CG, Rc12UU)
	r272: Rc12LU() -> CG() + Rc12UU() ku45 #Modifiers(Rc12LU)
	r273: Grb2() + Rc12UU() -> Rc12UG() fRate272() #Modifiers(Grb2, Rc12UU)
	r274: Rc12UG() -> Grb2() + Rc12UU() ku68 #Modifiers(Rc12UG)
	r275: CG() + Rc12UU() -> Rc12UL() fRate274() #Modifiers(CG, Rc12UU)
	r276: Rc12UL() -> CG() + Rc12UU() ku68 #Modifiers(Rc12UL)
	r277: Grb2() + Rc12CU() -> Rc12LU() kbcg #Modifiers(Grb2, Rc12CU)
	r278: Rc12LU() -> Grb2() + Rc12CU() kucg #Modifiers(Rc12LU)
	r279: Grb2() + Rc12CU() -> Rc12CG() fRate278() #Modifiers(Grb2, Rc12CU)
	r280: Rc12CG() -> Grb2() + Rc12CU() ku68 #Modifiers(Rc12CG)
	r281: Grb2() + Rc12LU() -> Rc12LG() fRate280() #Modifiers(Grb2, Rc12LU)
	r282: Rc12LG() -> Grb2() + Rc12LU() ku68 #Modifiers(Rc12LG)
	r283: Rc12LU() -> Rc12CC() fRate282() #Modifiers(Rc12LU)
	r284: Rc12CC() -> Rc12LU() ku68M #Modifiers(Rc12CC)
	r285: Cbl() + Rc12UG() -> Rc12CG() kb45 #Modifiers(Cbl, Rc12UG)
	r286: Rc12CG() -> Cbl() + Rc12UG() ku45 #Modifiers(Rc12CG)
	r287: CG() + Rc12UG() -> Rc12LG() kb45 #Modifiers(CG, Rc12UG)
	r288: Rc12LG() -> CG() + Rc12UG() ku45 #Modifiers(Rc12LG)
	r289: Cbl() + Rc12UG() -> Rc12UL() kbcg #Modifiers(Cbl, Rc12UG)
	r290: Rc12UL() -> Cbl() + Rc12UG() kucg #Modifiers(Rc12UL)
	r291: Rc12UL() -> Rc12CC() kb45P #Modifiers(Rc12UL)
	r292: Rc12CC() -> Rc12UL() ku45M #Modifiers(Rc12CC)
	r293: Rc12CG() -> Rc12CC() kbcgP #Modifiers(Rc12CG)
	r294: Rc12CC() -> Rc12CG() kucgM #Modifiers(Rc12CC)
	r295: Grb2() + Rc12CG() -> Rc12LG() kbcg #Modifiers(Grb2, Rc12CG)
	r296: Rc12LG() -> Grb2() + Rc12CG() kucg #Modifiers(Rc12LG)
	r297: Cbl() + RcL10UU() -> RcL10CU() kb45 #Modifiers(Cbl, RcL10UU)
	r298: RcL10CU() -> Cbl() + RcL10UU() ku45 #Modifiers(RcL10CU)
	r299: CG() + RcL10UU() -> RcL10LU() kb45 #Modifiers(CG, RcL10UU)
	r300: RcL10LU() -> CG() + RcL10UU() ku45 #Modifiers(RcL10LU)
	r301: Grb2() + RcL10CU() -> RcL10LU() kbcg #Modifiers(Grb2, RcL10CU)
	r302: RcL10LU() -> Grb2() + RcL10CU() kucg #Modifiers(RcL10LU)
	r303: Grb2() + RcL01UU() -> RcL01UG() kb68 #Modifiers(Grb2, RcL01UU)
	r304: RcL01UG() -> Grb2() + RcL01UU() ku68 #Modifiers(RcL01UG)
	r305: CG() + RcL01UU() -> RcL01UL() kb68 #Modifiers(CG, RcL01UU)
	r306: RcL01UL() -> CG() + RcL01UU() ku68 #Modifiers(RcL01UL)
	r307: Cbl() + RcL01UG() -> RcL01UL() kbcg #Modifiers(Cbl, RcL01UG)
	r308: RcL01UL() -> Cbl() + RcL01UG() kucg #Modifiers(RcL01UL)
	r309: Cbl() + RcL11UU() -> RcL11CU() kb45 #Modifiers(Cbl, RcL11UU)
	r310: RcL11CU() -> Cbl() + RcL11UU() ku45 #Modifiers(RcL11CU)
	r311: CG() + RcL11UU() -> RcL11LU() kb45 #Modifiers(CG, RcL11UU)
	r312: RcL11LU() -> CG() + RcL11UU() ku45 #Modifiers(RcL11LU)
	r313: Grb2() + RcL11UU() -> RcL11UG() kb68 #Modifiers(Grb2, RcL11UU)
	r314: RcL11UG() -> Grb2() + RcL11UU() ku68 #Modifiers(RcL11UG)
	r315: CG() + RcL11UU() -> RcL11UL() kb68 #Modifiers(CG, RcL11UU)
	r316: RcL11UL() -> CG() + RcL11UU() ku68 #Modifiers(RcL11UL)
	r317: Grb2() + RcL11CU() -> RcL11LU() kbcg #Modifiers(Grb2, RcL11CU)
	r318: RcL11LU() -> Grb2() + RcL11CU() kucg #Modifiers(RcL11LU)
	r319: Grb2() + RcL11CU() -> RcL11CG() kb68 #Modifiers(Grb2, RcL11CU)
	r320: RcL11CG() -> Grb2() + RcL11CU() ku68 #Modifiers(RcL11CG)
	r321: Grb2() + RcL11LU() -> RcL11LG() kb68 #Modifiers(Grb2, RcL11LU)
	r322: RcL11LG() -> Grb2() + RcL11LU() ku68 #Modifiers(RcL11LG)
	r323: RcL11LU() -> RcL11CC() kb68P #Modifiers(RcL11LU)
	r324: RcL11CC() -> RcL11LU() ku68M #Modifiers(RcL11CC)
	r325: Cbl() + RcL11UG() -> RcL11CG() kb45 #Modifiers(Cbl, RcL11UG)
	r326: RcL11CG() -> Cbl() + RcL11UG() ku45 #Modifiers(RcL11CG)
	r327: CG() + RcL11UG() -> RcL11LG() kb45 #Modifiers(CG, RcL11UG)
	r328: RcL11LG() -> CG() + RcL11UG() ku45 #Modifiers(RcL11LG)
	r329: Cbl() + RcL11UG() -> RcL11UL() kbcg #Modifiers(Cbl, RcL11UG)
	r330: RcL11UL() -> Cbl() + RcL11UG() kucg #Modifiers(RcL11UL)
	r331: RcL11UL() -> RcL11CC() kb45P #Modifiers(RcL11UL)
	r332: RcL11CC() -> RcL11UL() ku45M #Modifiers(RcL11CC)
	r333: RcL11CG() -> RcL11CC() kbcgP #Modifiers(RcL11CG)
	r334: RcL11CC() -> RcL11CG() kucgM #Modifiers(RcL11CC)
	r335: Grb2() + RcL11CG() -> RcL11LG() kbcg #Modifiers(Grb2, RcL11CG)
	r336: RcL11LG() -> Grb2() + RcL11CG() kucg #Modifiers(RcL11LG)
	r337: Grb2() + RcL02UU() -> RcL02UG() fRate336() #Modifiers(Grb2, RcL02UU)
	r338: RcL02UG() -> Grb2() + RcL02UU() ku68 #Modifiers(RcL02UG)
	r339: CG() + RcL02UU() -> RcL02UL() fRate338() #Modifiers(CG, RcL02UU)
	r340: RcL02UL() -> CG() + RcL02UU() ku68 #Modifiers(RcL02UL)
	r341: Cbl() + RcL02UG() -> RcL02UL() kbcg #Modifiers(Cbl, RcL02UG)
	r342: RcL02UL() -> Cbl() + RcL02UG() kucg #Modifiers(RcL02UL)
	r343: Cbl() + RcL12UU() -> RcL12CU() kb45 #Modifiers(Cbl, RcL12UU)
	r344: RcL12CU() -> Cbl() + RcL12UU() ku45 #Modifiers(RcL12CU)
	r345: CG() + RcL12UU() -> RcL12LU() kb45 #Modifiers(CG, RcL12UU)
	r346: RcL12LU() -> CG() + RcL12UU() ku45 #Modifiers(RcL12LU)
	r347: Grb2() + RcL12UU() -> RcL12UG() fRate346() #Modifiers(Grb2, RcL12UU)
	r348: RcL12UG() -> Grb2() + RcL12UU() ku68 #Modifiers(RcL12UG)
	r349: CG() + RcL12UU() -> RcL12UL() fRate348() #Modifiers(CG, RcL12UU)
	r350: RcL12UL() -> CG() + RcL12UU() ku68 #Modifiers(RcL12UL)
	r351: Grb2() + RcL12CU() -> RcL12LU() kbcg #Modifiers(Grb2, RcL12CU)
	r352: RcL12LU() -> Grb2() + RcL12CU() kucg #Modifiers(RcL12LU)
	r353: Grb2() + RcL12CU() -> RcL12CG() fRate352() #Modifiers(Grb2, RcL12CU)
	r354: RcL12CG() -> Grb2() + RcL12CU() ku68 #Modifiers(RcL12CG)
	r355: Grb2() + RcL12LU() -> RcL12LG() fRate354() #Modifiers(Grb2, RcL12LU)
	r356: RcL12LG() -> Grb2() + RcL12LU() ku68 #Modifiers(RcL12LG)
	r357: RcL12LU() -> RcL12CC() fRate356() #Modifiers(RcL12LU)
	r358: RcL12CC() -> RcL12LU() ku68M #Modifiers(RcL12CC)
	r359: Cbl() + RcL12UG() -> RcL12CG() kb45 #Modifiers(Cbl, RcL12UG)
	r360: RcL12CG() -> Cbl() + RcL12UG() ku45 #Modifiers(RcL12CG)
	r361: CG() + RcL12UG() -> RcL12LG() kb45 #Modifiers(CG, RcL12UG)
	r362: RcL12LG() -> CG() + RcL12UG() ku45 #Modifiers(RcL12LG)
	r363: Cbl() + RcL12UG() -> RcL12UL() kbcg #Modifiers(Cbl, RcL12UG)
	r364: RcL12UL() -> Cbl() + RcL12UG() kucg #Modifiers(RcL12UL)
	r365: RcL12UL() -> RcL12CC() kb45P #Modifiers(RcL12UL)
	r366: RcL12CC() -> RcL12UL() ku45M #Modifiers(RcL12CC)
	r367: RcL12CG() -> RcL12CC() kbcgP #Modifiers(RcL12CG)
	r368: RcL12CC() -> RcL12CG() kucgM #Modifiers(RcL12CC)
	r369: Grb2() + RcL12CG() -> RcL12LG() kbcg #Modifiers(Grb2, RcL12CG)
	r370: RcL12LG() -> Grb2() + RcL12CG() kucg #Modifiers(RcL12LG)
	r371: Cbl() + R10UU() -> R10CU() kb45 #Modifiers(Cbl, R10UU)
	r372: R10CU() -> Cbl() + R10UU() ku45 #Modifiers(R10CU)
	r373: CG() + R10UU() -> R10LU() kb45 #Modifiers(CG, R10UU)
	r374: R10LU() -> CG() + R10UU() ku45 #Modifiers(R10LU)
	r375: Grb2() + R10CU() -> R10LU() kbcg #Modifiers(Grb2, R10CU)
	r376: R10LU() -> Grb2() + R10CU() kucg #Modifiers(R10LU)
	r377: Grb2() + R01UU() -> R01UG() kb68 #Modifiers(Grb2, R01UU)
	r378: R01UG() -> Grb2() + R01UU() ku68 #Modifiers(R01UG)
	r379: CG() + R01UU() -> R01UL() kb68 #Modifiers(CG, R01UU)
	r380: R01UL() -> CG() + R01UU() ku68 #Modifiers(R01UL)
	r381: Cbl() + R01UG() -> R01UL() kbcg #Modifiers(Cbl, R01UG)
	r382: R01UL() -> Cbl() + R01UG() kucg #Modifiers(R01UL)
	r383: Cbl() + R11UU() -> R11CU() kb45 #Modifiers(Cbl, R11UU)
	r384: R11CU() -> Cbl() + R11UU() ku45 #Modifiers(R11CU)
	r385: CG() + R11UU() -> R11LU() kb45 #Modifiers(CG, R11UU)
	r386: R11LU() -> CG() + R11UU() ku45 #Modifiers(R11LU)
	r387: Grb2() + R11UU() -> R11UG() kb68 #Modifiers(Grb2, R11UU)
	r388: R11UG() -> Grb2() + R11UU() ku68 #Modifiers(R11UG)
	r389: CG() + R11UU() -> R11UL() kb68 #Modifiers(CG, R11UU)
	r390: R11UL() -> CG() + R11UU() ku68 #Modifiers(R11UL)
	r391: Grb2() + R11CU() -> R11LU() kbcg #Modifiers(Grb2, R11CU)
	r392: R11LU() -> Grb2() + R11CU() kucg #Modifiers(R11LU)
	r393: Grb2() + R11CU() -> R11CG() kb68 #Modifiers(Grb2, R11CU)
	r394: R11CG() -> Grb2() + R11CU() ku68 #Modifiers(R11CG)
	r395: Grb2() + R11LU() -> R11LG() kb68 #Modifiers(Grb2, R11LU)
	r396: R11LG() -> Grb2() + R11LU() ku68 #Modifiers(R11LG)
	r397: R11LU() -> R11CC() kb68P #Modifiers(R11LU)
	r398: R11CC() -> R11LU() ku68M #Modifiers(R11CC)
	r399: Cbl() + R11UG() -> R11CG() kb45 #Modifiers(Cbl, R11UG)
	r400: R11CG() -> Cbl() + R11UG() ku45 #Modifiers(R11CG)
	r401: CG() + R11UG() -> R11LG() kb45 #Modifiers(CG, R11UG)
	r402: R11LG() -> CG() + R11UG() ku45 #Modifiers(R11LG)
	r403: Cbl() + R11UG() -> R11UL() kbcg #Modifiers(Cbl, R11UG)
	r404: R11UL() -> Cbl() + R11UG() kucg #Modifiers(R11UL)
	r405: R11UL() -> R11CC() kb45P #Modifiers(R11UL)
	r406: R11CC() -> R11UL() ku45M #Modifiers(R11CC)
	r407: R11CG() -> R11CC() kbcgP #Modifiers(R11CG)
	r408: R11CC() -> R11CG() kucgM #Modifiers(R11CC)
	r409: Grb2() + R11CG() -> R11LG() kbcg #Modifiers(Grb2, R11CG)
	r410: R11LG() -> Grb2() + R11CG() kucg #Modifiers(R11LG)
	r411: Grb2() + R02UU() -> R02UG() fRate410() #Modifiers(Grb2, R02UU)
	r412: R02UG() -> Grb2() + R02UU() ku68 #Modifiers(R02UG)
	r413: CG() + R02UU() -> R02UL() fRate412() #Modifiers(CG, R02UU)
	r414: R02UL() -> CG() + R02UU() ku68 #Modifiers(R02UL)
	r415: Cbl() + R02UG() -> R02UL() kbcg #Modifiers(Cbl, R02UG)
	r416: R02UL() -> Cbl() + R02UG() kucg #Modifiers(R02UL)
	r417: Cbl() + R12UU() -> R12CU() kb45 #Modifiers(Cbl, R12UU)
	r418: R12CU() -> Cbl() + R12UU() ku45 #Modifiers(R12CU)
	r419: CG() + R12UU() -> R12LU() kb45 #Modifiers(CG, R12UU)
	r420: R12LU() -> CG() + R12UU() ku45 #Modifiers(R12LU)
	r421: Grb2() + R12UU() -> R12UG() fRate420() #Modifiers(Grb2, R12UU)
	r422: R12UG() -> Grb2() + R12UU() ku68 #Modifiers(R12UG)
	r423: CG() + R12UU() -> R12UL() fRate422() #Modifiers(CG, R12UU)
	r424: R12UL() -> CG() + R12UU() ku68 #Modifiers(R12UL)
	r425: Grb2() + R12CU() -> R12LU() kbcg #Modifiers(Grb2, R12CU)
	r426: R12LU() -> Grb2() + R12CU() kucg #Modifiers(R12LU)
	r427: Grb2() + R12CU() -> R12CG() fRate426() #Modifiers(Grb2, R12CU)
	r428: R12CG() -> Grb2() + R12CU() ku68 #Modifiers(R12CG)
	r429: Grb2() + R12LU() -> R12LG() fRate428() #Modifiers(Grb2, R12LU)
	r430: R12LG() -> Grb2() + R12LU() ku68 #Modifiers(R12LG)
	r431: R12LU() -> R12CC() fRate430() #Modifiers(R12LU)
	r432: R12CC() -> R12LU() ku68M #Modifiers(R12CC)
	r433: Cbl() + R12UG() -> R12CG() kb45 #Modifiers(Cbl, R12UG)
	r434: R12CG() -> Cbl() + R12UG() ku45 #Modifiers(R12CG)
	r435: CG() + R12UG() -> R12LG() kb45 #Modifiers(CG, R12UG)
	r436: R12LG() -> CG() + R12UG() ku45 #Modifiers(R12LG)
	r437: Cbl() + R12UG() -> R12UL() kbcg #Modifiers(Cbl, R12UG)
	r438: R12UL() -> Cbl() + R12UG() kucg #Modifiers(R12UL)
	r439: R12UL() -> R12CC() kb45P #Modifiers(R12UL)
	r440: R12CC() -> R12UL() ku45M #Modifiers(R12CC)
	r441: R12CG() -> R12CC() kbcgP #Modifiers(R12CG)
	r442: R12CC() -> R12CG() kucgM #Modifiers(R12CC)
	r443: Grb2() + R12CG() -> R12LG() kbcg #Modifiers(Grb2, R12CG)
	r444: R12LG() -> Grb2() + R12CG() kucg #Modifiers(R12LG)
	r445: Cbl() + RL10UU() -> RL10CU() kb45 #Modifiers(Cbl, RL10UU)
	r446: RL10CU() -> Cbl() + RL10UU() ku45 #Modifiers(RL10CU)
	r447: CG() + RL10UU() -> RL10LU() kb45 #Modifiers(CG, RL10UU)
	r448: RL10LU() -> CG() + RL10UU() ku45 #Modifiers(RL10LU)
	r449: Grb2() + RL10CU() -> RL10LU() kbcg #Modifiers(Grb2, RL10CU)
	r450: RL10LU() -> Grb2() + RL10CU() kucg #Modifiers(RL10LU)
	r451: Grb2() + RL01UU() -> RL01UG() kb68 #Modifiers(Grb2, RL01UU)
	r452: RL01UG() -> Grb2() + RL01UU() ku68 #Modifiers(RL01UG)
	r453: CG() + RL01UU() -> RL01UL() kb68 #Modifiers(CG, RL01UU)
	r454: RL01UL() -> CG() + RL01UU() ku68 #Modifiers(RL01UL)
	r455: Cbl() + RL01UG() -> RL01UL() kbcg #Modifiers(Cbl, RL01UG)
	r456: RL01UL() -> Cbl() + RL01UG() kucg #Modifiers(RL01UL)
	r457: Cbl() + RL11UU() -> RL11CU() kb45 #Modifiers(Cbl, RL11UU)
	r458: RL11CU() -> Cbl() + RL11UU() ku45 #Modifiers(RL11CU)
	r459: CG() + RL11UU() -> RL11LU() kb45 #Modifiers(CG, RL11UU)
	r460: RL11LU() -> CG() + RL11UU() ku45 #Modifiers(RL11LU)
	r461: Grb2() + RL11UU() -> RL11UG() kb68 #Modifiers(Grb2, RL11UU)
	r462: RL11UG() -> Grb2() + RL11UU() ku68 #Modifiers(RL11UG)
	r463: CG() + RL11UU() -> RL11UL() kb68 #Modifiers(CG, RL11UU)
	r464: RL11UL() -> CG() + RL11UU() ku68 #Modifiers(RL11UL)
	r465: Grb2() + RL11CU() -> RL11LU() kbcg #Modifiers(Grb2, RL11CU)
	r466: RL11LU() -> Grb2() + RL11CU() kucg #Modifiers(RL11LU)
	r467: Grb2() + RL11CU() -> RL11CG() kb68 #Modifiers(Grb2, RL11CU)
	r468: RL11CG() -> Grb2() + RL11CU() ku68 #Modifiers(RL11CG)
	r469: Grb2() + RL11LU() -> RL11LG() kb68 #Modifiers(Grb2, RL11LU)
	r470: RL11LG() -> Grb2() + RL11LU() ku68 #Modifiers(RL11LG)
	r471: RL11LU() -> RL11CC() kb68P #Modifiers(RL11LU)
	r472: RL11CC() -> RL11LU() ku68M #Modifiers(RL11CC)
	r473: Cbl() + RL11UG() -> RL11CG() kb45 #Modifiers(Cbl, RL11UG)
	r474: RL11CG() -> Cbl() + RL11UG() ku45 #Modifiers(RL11CG)
	r475: CG() + RL11UG() -> RL11LG() kb45 #Modifiers(CG, RL11UG)
	r476: RL11LG() -> CG() + RL11UG() ku45 #Modifiers(RL11LG)
	r477: Cbl() + RL11UG() -> RL11UL() kbcg #Modifiers(Cbl, RL11UG)
	r478: RL11UL() -> Cbl() + RL11UG() kucg #Modifiers(RL11UL)
	r479: RL11UL() -> RL11CC() kb45P #Modifiers(RL11UL)
	r480: RL11CC() -> RL11UL() ku45M #Modifiers(RL11CC)
	r481: RL11CG() -> RL11CC() kbcgP #Modifiers(RL11CG)
	r482: RL11CC() -> RL11CG() kucgM #Modifiers(RL11CC)
	r483: Grb2() + RL11CG() -> RL11LG() kbcg #Modifiers(Grb2, RL11CG)
	r484: RL11LG() -> Grb2() + RL11CG() kucg #Modifiers(RL11LG)
	r485: Grb2() + RL02UU() -> RL02UG() fRate484() #Modifiers(Grb2, RL02UU)
	r486: RL02UG() -> Grb2() + RL02UU() ku68 #Modifiers(RL02UG)
	r487: CG() + RL02UU() -> RL02UL() fRate486() #Modifiers(CG, RL02UU)
	r488: RL02UL() -> CG() + RL02UU() ku68 #Modifiers(RL02UL)
	r489: Cbl() + RL02UG() -> RL02UL() kbcg #Modifiers(Cbl, RL02UG)
	r490: RL02UL() -> Cbl() + RL02UG() kucg #Modifiers(RL02UL)
	r491: Cbl() + RL12UU() -> RL12CU() kb45 #Modifiers(Cbl, RL12UU)
	r492: RL12CU() -> Cbl() + RL12UU() ku45 #Modifiers(RL12CU)
	r493: CG() + RL12UU() -> RL12LU() kb45 #Modifiers(CG, RL12UU)
	r494: RL12LU() -> CG() + RL12UU() ku45 #Modifiers(RL12LU)
	r495: Grb2() + RL12UU() -> RL12UG() fRate494() #Modifiers(Grb2, RL12UU)
	r496: RL12UG() -> Grb2() + RL12UU() ku68 #Modifiers(RL12UG)
	r497: CG() + RL12UU() -> RL12UL() fRate496() #Modifiers(CG, RL12UU)
	r498: RL12UL() -> CG() + RL12UU() ku68 #Modifiers(RL12UL)
	r499: Grb2() + RL12CU() -> RL12LU() kbcg #Modifiers(Grb2, RL12CU)
	r500: RL12LU() -> Grb2() + RL12CU() kucg #Modifiers(RL12LU)
	r501: Grb2() + RL12CU() -> RL12CG() fRate500() #Modifiers(Grb2, RL12CU)
	r502: RL12CG() -> Grb2() + RL12CU() ku68 #Modifiers(RL12CG)
	r503: Grb2() + RL12LU() -> RL12LG() fRate502() #Modifiers(Grb2, RL12LU)
	r504: RL12LG() -> Grb2() + RL12LU() ku68 #Modifiers(RL12LG)
	r505: RL12LU() -> RL12CC() fRate504() #Modifiers(RL12LU)
	r506: RL12CC() -> RL12LU() ku68M #Modifiers(RL12CC)
	r507: Cbl() + RL12UG() -> RL12CG() kb45 #Modifiers(Cbl, RL12UG)
	r508: RL12CG() -> Cbl() + RL12UG() ku45 #Modifiers(RL12CG)
	r509: CG() + RL12UG() -> RL12LG() kb45 #Modifiers(CG, RL12UG)
	r510: RL12LG() -> CG() + RL12UG() ku45 #Modifiers(RL12LG)
	r511: Cbl() + RL12UG() -> RL12UL() kbcg #Modifiers(Cbl, RL12UG)
	r512: RL12UL() -> Cbl() + RL12UG() kucg #Modifiers(RL12UL)
	r513: RL12UL() -> RL12CC() kb45P #Modifiers(RL12UL)
	r514: RL12CC() -> RL12UL() ku45M #Modifiers(RL12CC)
	r515: RL12CG() -> RL12CC() kbcgP #Modifiers(RL12CG)
	r516: RL12CC() -> RL12CG() kucgM #Modifiers(RL12CC)
	r517: Grb2() + RL12CG() -> RL12LG() kbcg #Modifiers(Grb2, RL12CG)
	r518: RL12LG() -> Grb2() + RL12CG() kucg #Modifiers(RL12LG)
	r519: Cbl() + Di10UU() -> Di10CU() kb45 #Modifiers(Cbl, Di10UU)
	r520: Di10CU() -> Cbl() + Di10UU() ku45 #Modifiers(Di10CU)
	r521: CG() + Di10UU() -> Di10LU() kb45 #Modifiers(CG, Di10UU)
	r522: Di10LU() -> CG() + Di10UU() ku45 #Modifiers(Di10LU)
	r523: Grb2() + Di10CU() -> Di10LU() kbcg #Modifiers(Grb2, Di10CU)
	r524: Di10LU() -> Grb2() + Di10CU() kucg #Modifiers(Di10LU)
	r525: Grb2() + Di01UU() -> Di01UG() kb68 #Modifiers(Grb2, Di01UU)
	r526: Di01UG() -> Grb2() + Di01UU() ku68 #Modifiers(Di01UG)
	r527: CG() + Di01UU() -> Di01UL() kb68 #Modifiers(CG, Di01UU)
	r528: Di01UL() -> CG() + Di01UU() ku68 #Modifiers(Di01UL)
	r529: Cbl() + Di01UG() -> Di01UL() kbcg #Modifiers(Cbl, Di01UG)
	r530: Di01UL() -> Cbl() + Di01UG() kucg #Modifiers(Di01UL)
	r531: Cbl() + Di11UU() -> Di11CU() kb45 #Modifiers(Cbl, Di11UU)
	r532: Di11CU() -> Cbl() + Di11UU() ku45 #Modifiers(Di11CU)
	r533: CG() + Di11UU() -> Di11LU() kb45 #Modifiers(CG, Di11UU)
	r534: Di11LU() -> CG() + Di11UU() ku45 #Modifiers(Di11LU)
	r535: Grb2() + Di11UU() -> Di11UG() kb68 #Modifiers(Grb2, Di11UU)
	r536: Di11UG() -> Grb2() + Di11UU() ku68 #Modifiers(Di11UG)
	r537: CG() + Di11UU() -> Di11UL() kb68 #Modifiers(CG, Di11UU)
	r538: Di11UL() -> CG() + Di11UU() ku68 #Modifiers(Di11UL)
	r539: Grb2() + Di11CU() -> Di11LU() kbcg #Modifiers(Grb2, Di11CU)
	r540: Di11LU() -> Grb2() + Di11CU() kucg #Modifiers(Di11LU)
	r541: Grb2() + Di11CU() -> Di11CG() kb68 #Modifiers(Grb2, Di11CU)
	r542: Di11CG() -> Grb2() + Di11CU() ku68 #Modifiers(Di11CG)
	r543: Grb2() + Di11LU() -> Di11LG() kb68 #Modifiers(Grb2, Di11LU)
	r544: Di11LG() -> Grb2() + Di11LU() ku68 #Modifiers(Di11LG)
	r545: Di11LU() -> Di11CC() kb68P #Modifiers(Di11LU)
	r546: Di11CC() -> Di11LU() ku68M #Modifiers(Di11CC)
	r547: Cbl() + Di11UG() -> Di11CG() kb45 #Modifiers(Cbl, Di11UG)
	r548: Di11CG() -> Cbl() + Di11UG() ku45 #Modifiers(Di11CG)
	r549: CG() + Di11UG() -> Di11LG() kb45 #Modifiers(CG, Di11UG)
	r550: Di11LG() -> CG() + Di11UG() ku45 #Modifiers(Di11LG)
	r551: Cbl() + Di11UG() -> Di11UL() kbcg #Modifiers(Cbl, Di11UG)
	r552: Di11UL() -> Cbl() + Di11UG() kucg #Modifiers(Di11UL)
	r553: Di11UL() -> Di11CC() kb45P #Modifiers(Di11UL)
	r554: Di11CC() -> Di11UL() ku45M #Modifiers(Di11CC)
	r555: Di11CG() -> Di11CC() kbcgP #Modifiers(Di11CG)
	r556: Di11CC() -> Di11CG() kucgM #Modifiers(Di11CC)
	r557: Grb2() + Di11CG() -> Di11LG() kbcg #Modifiers(Grb2, Di11CG)
	r558: Di11LG() -> Grb2() + Di11CG() kucg #Modifiers(Di11LG)
	r559: Grb2() + Di02UU() -> Di02UG() fRate558() #Modifiers(Grb2, Di02UU)
	r560: Di02UG() -> Grb2() + Di02UU() ku68 #Modifiers(Di02UG)
	r561: CG() + Di02UU() -> Di02UL() fRate560() #Modifiers(CG, Di02UU)
	r562: Di02UL() -> CG() + Di02UU() ku68 #Modifiers(Di02UL)
	r563: Cbl() + Di02UG() -> Di02UL() kbcg #Modifiers(Cbl, Di02UG)
	r564: Di02UL() -> Cbl() + Di02UG() kucg #Modifiers(Di02UL)
	r565: Cbl() + Di12UU() -> Di12CU() kb45 #Modifiers(Cbl, Di12UU)
	r566: Di12CU() -> Cbl() + Di12UU() ku45 #Modifiers(Di12CU)
	r567: CG() + Di12UU() -> Di12LU() kb45 #Modifiers(CG, Di12UU)
	r568: Di12LU() -> CG() + Di12UU() ku45 #Modifiers(Di12LU)
	r569: Grb2() + Di12UU() -> Di12UG() fRate568() #Modifiers(Grb2, Di12UU)
	r570: Di12UG() -> Grb2() + Di12UU() ku68 #Modifiers(Di12UG)
	r571: CG() + Di12UU() -> Di12UL() fRate570() #Modifiers(CG, Di12UU)
	r572: Di12UL() -> CG() + Di12UU() ku68 #Modifiers(Di12UL)
	r573: Grb2() + Di12CU() -> Di12LU() kbcg #Modifiers(Grb2, Di12CU)
	r574: Di12LU() -> Grb2() + Di12CU() kucg #Modifiers(Di12LU)
	r575: Grb2() + Di12CU() -> Di12CG() fRate574() #Modifiers(Grb2, Di12CU)
	r576: Di12CG() -> Grb2() + Di12CU() ku68 #Modifiers(Di12CG)
	r577: Grb2() + Di12LU() -> Di12LG() fRate576() #Modifiers(Grb2, Di12LU)
	r578: Di12LG() -> Grb2() + Di12LU() ku68 #Modifiers(Di12LG)
	r579: Di12LU() -> Di12CC() fRate578() #Modifiers(Di12LU)
	r580: Di12CC() -> Di12LU() ku68M #Modifiers(Di12CC)
	r581: Cbl() + Di12UG() -> Di12CG() kb45 #Modifiers(Cbl, Di12UG)
	r582: Di12CG() -> Cbl() + Di12UG() ku45 #Modifiers(Di12CG)
	r583: CG() + Di12UG() -> Di12LG() kb45 #Modifiers(CG, Di12UG)
	r584: Di12LG() -> CG() + Di12UG() ku45 #Modifiers(Di12LG)
	r585: Cbl() + Di12UG() -> Di12UL() kbcg #Modifiers(Cbl, Di12UG)
	r586: Di12UL() -> Cbl() + Di12UG() kucg #Modifiers(Di12UL)
	r587: Di12UL() -> Di12CC() kb45P #Modifiers(Di12UL)
	r588: Di12CC() -> Di12UL() ku45M #Modifiers(Di12CC)
	r589: Di12CG() -> Di12CC() kbcgP #Modifiers(Di12CG)
	r590: Di12CC() -> Di12CG() kucgM #Modifiers(Di12CC)
	r591: Grb2() + Di12CG() -> Di12LG() kbcg #Modifiers(Grb2, Di12CG)
	r592: Di12LG() -> Grb2() + Di12CG() kucg #Modifiers(Di12LG)
	r593: Cbl() + Da10UU() -> Da10CU() kb45 #Modifiers(Cbl, Da10UU)
	r594: Da10CU() -> Cbl() + Da10UU() ku45 #Modifiers(Da10CU)
	r595: CG() + Da10UU() -> Da10LU() kb45 #Modifiers(CG, Da10UU)
	r596: Da10LU() -> CG() + Da10UU() ku45 #Modifiers(Da10LU)
	r597: Grb2() + Da10CU() -> Da10LU() kbcg #Modifiers(Grb2, Da10CU)
	r598: Da10LU() -> Grb2() + Da10CU() kucg #Modifiers(Da10LU)
	r599: Grb2() + Da01UU() -> Da01UG() kb68 #Modifiers(Grb2, Da01UU)
	r600: Da01UG() -> Grb2() + Da01UU() ku68 #Modifiers(Da01UG)
	r601: CG() + Da01UU() -> Da01UL() kb68 #Modifiers(CG, Da01UU)
	r602: Da01UL() -> CG() + Da01UU() ku68 #Modifiers(Da01UL)
	r603: Cbl() + Da01UG() -> Da01UL() kbcg #Modifiers(Cbl, Da01UG)
	r604: Da01UL() -> Cbl() + Da01UG() kucg #Modifiers(Da01UL)
	r605: Cbl() + Da11UU() -> Da11CU() kb45 #Modifiers(Cbl, Da11UU)
	r606: Da11CU() -> Cbl() + Da11UU() ku45 #Modifiers(Da11CU)
	r607: CG() + Da11UU() -> Da11LU() kb45 #Modifiers(CG, Da11UU)
	r608: Da11LU() -> CG() + Da11UU() ku45 #Modifiers(Da11LU)
	r609: Grb2() + Da11UU() -> Da11UG() kb68 #Modifiers(Grb2, Da11UU)
	r610: Da11UG() -> Grb2() + Da11UU() ku68 #Modifiers(Da11UG)
	r611: CG() + Da11UU() -> Da11UL() kb68 #Modifiers(CG, Da11UU)
	r612: Da11UL() -> CG() + Da11UU() ku68 #Modifiers(Da11UL)
	r613: Grb2() + Da11CU() -> Da11LU() kbcg #Modifiers(Grb2, Da11CU)
	r614: Da11LU() -> Grb2() + Da11CU() kucg #Modifiers(Da11LU)
	r615: Grb2() + Da11CU() -> Da11CG() kb68 #Modifiers(Grb2, Da11CU)
	r616: Da11CG() -> Grb2() + Da11CU() ku68 #Modifiers(Da11CG)
	r617: Grb2() + Da11LU() -> Da11LG() kb68 #Modifiers(Grb2, Da11LU)
	r618: Da11LG() -> Grb2() + Da11LU() ku68 #Modifiers(Da11LG)
	r619: Da11LU() -> Da11CC() kb68P #Modifiers(Da11LU)
	r620: Da11CC() -> Da11LU() ku68M #Modifiers(Da11CC)
	r621: Cbl() + Da11UG() -> Da11CG() kb45 #Modifiers(Cbl, Da11UG)
	r622: Da11CG() -> Cbl() + Da11UG() ku45 #Modifiers(Da11CG)
	r623: CG() + Da11UG() -> Da11LG() kb45 #Modifiers(CG, Da11UG)
	r624: Da11LG() -> CG() + Da11UG() ku45 #Modifiers(Da11LG)
	r625: Cbl() + Da11UG() -> Da11UL() kbcg #Modifiers(Cbl, Da11UG)
	r626: Da11UL() -> Cbl() + Da11UG() kucg #Modifiers(Da11UL)
	r627: Da11UL() -> Da11CC() kb45P #Modifiers(Da11UL)
	r628: Da11CC() -> Da11UL() ku45M #Modifiers(Da11CC)
	r629: Da11CG() -> Da11CC() kbcgP #Modifiers(Da11CG)
	r630: Da11CC() -> Da11CG() kucgM #Modifiers(Da11CC)
	r631: Grb2() + Da11CG() -> Da11LG() kbcg #Modifiers(Grb2, Da11CG)
	r632: Da11LG() -> Grb2() + Da11CG() kucg #Modifiers(Da11LG)
	r633: Grb2() + Da02UU() -> Da02UG() fRate632() #Modifiers(Grb2, Da02UU)
	r634: Da02UG() -> Grb2() + Da02UU() ku68 #Modifiers(Da02UG)
	r635: CG() + Da02UU() -> Da02UL() fRate634() #Modifiers(CG, Da02UU)
	r636: Da02UL() -> CG() + Da02UU() ku68 #Modifiers(Da02UL)
	r637: Cbl() + Da02UG() -> Da02UL() kbcg #Modifiers(Cbl, Da02UG)
	r638: Da02UL() -> Cbl() + Da02UG() kucg #Modifiers(Da02UL)
	r639: Cbl() + Da12UU() -> Da12CU() kb45 #Modifiers(Cbl, Da12UU)
	r640: Da12CU() -> Cbl() + Da12UU() ku45 #Modifiers(Da12CU)
	r641: CG() + Da12UU() -> Da12LU() kb45 #Modifiers(CG, Da12UU)
	r642: Da12LU() -> CG() + Da12UU() ku45 #Modifiers(Da12LU)
	r643: Grb2() + Da12UU() -> Da12UG() fRate642() #Modifiers(Grb2, Da12UU)
	r644: Da12UG() -> Grb2() + Da12UU() ku68 #Modifiers(Da12UG)
	r645: CG() + Da12UU() -> Da12UL() fRate644() #Modifiers(CG, Da12UU)
	r646: Da12UL() -> CG() + Da12UU() ku68 #Modifiers(Da12UL)
	r647: Grb2() + Da12CU() -> Da12LU() kbcg #Modifiers(Grb2, Da12CU)
	r648: Da12LU() -> Grb2() + Da12CU() kucg #Modifiers(Da12LU)
	r649: Grb2() + Da12CU() -> Da12CG() fRate648() #Modifiers(Grb2, Da12CU)
	r650: Da12CG() -> Grb2() + Da12CU() ku68 #Modifiers(Da12CG)
	r651: Grb2() + Da12LU() -> Da12LG() fRate650() #Modifiers(Grb2, Da12LU)
	r652: Da12LG() -> Grb2() + Da12LU() ku68 #Modifiers(Da12LG)
	r653: Da12LU() -> Da12CC() fRate652() #Modifiers(Da12LU)
	r654: Da12CC() -> Da12LU() ku68M #Modifiers(Da12CC)
	r655: Cbl() + Da12UG() -> Da12CG() kb45 #Modifiers(Cbl, Da12UG)
	r656: Da12CG() -> Cbl() + Da12UG() ku45 #Modifiers(Da12CG)
	r657: CG() + Da12UG() -> Da12LG() kb45 #Modifiers(CG, Da12UG)
	r658: Da12LG() -> CG() + Da12UG() ku45 #Modifiers(Da12LG)
	r659: Cbl() + Da12UG() -> Da12UL() kbcg #Modifiers(Cbl, Da12UG)
	r660: Da12UL() -> Cbl() + Da12UG() kucg #Modifiers(Da12UL)
	r661: Da12UL() -> Da12CC() kb45P #Modifiers(Da12UL)
	r662: Da12CC() -> Da12UL() ku45M #Modifiers(Da12CC)
	r663: Da12CG() -> Da12CC() kbcgP #Modifiers(Da12CG)
	r664: Da12CC() -> Da12CG() kucgM #Modifiers(Da12CC)
	r665: Grb2() + Da12CG() -> Da12LG() kbcg #Modifiers(Grb2, Da12CG)
	r666: Da12LG() -> Grb2() + Da12CG() kucg #Modifiers(Da12LG)
	r667: Cbl() + DiL10UU() -> DiL10CU() kb45 #Modifiers(Cbl, DiL10UU)
	r668: DiL10CU() -> Cbl() + DiL10UU() ku45 #Modifiers(DiL10CU)
	r669: CG() + DiL10UU() -> DiL10LU() kb45 #Modifiers(CG, DiL10UU)
	r670: DiL10LU() -> CG() + DiL10UU() ku45 #Modifiers(DiL10LU)
	r671: Grb2() + DiL10CU() -> DiL10LU() kbcg #Modifiers(Grb2, DiL10CU)
	r672: DiL10LU() -> Grb2() + DiL10CU() kucg #Modifiers(DiL10LU)
	r673: Grb2() + DiL01UU() -> DiL01UG() kb68 #Modifiers(Grb2, DiL01UU)
	r674: DiL01UG() -> Grb2() + DiL01UU() ku68 #Modifiers(DiL01UG)
	r675: CG() + DiL01UU() -> DiL01UL() kb68 #Modifiers(CG, DiL01UU)
	r676: DiL01UL() -> CG() + DiL01UU() ku68 #Modifiers(DiL01UL)
	r677: Cbl() + DiL01UG() -> DiL01UL() kbcg #Modifiers(Cbl, DiL01UG)
	r678: DiL01UL() -> Cbl() + DiL01UG() kucg #Modifiers(DiL01UL)
	r679: Cbl() + DiL11UU() -> DiL11CU() kb45 #Modifiers(Cbl, DiL11UU)
	r680: DiL11CU() -> Cbl() + DiL11UU() ku45 #Modifiers(DiL11CU)
	r681: CG() + DiL11UU() -> DiL11LU() kb45 #Modifiers(CG, DiL11UU)
	r682: DiL11LU() -> CG() + DiL11UU() ku45 #Modifiers(DiL11LU)
	r683: Grb2() + DiL11UU() -> DiL11UG() kb68 #Modifiers(Grb2, DiL11UU)
	r684: DiL11UG() -> Grb2() + DiL11UU() ku68 #Modifiers(DiL11UG)
	r685: CG() + DiL11UU() -> DiL11UL() kb68 #Modifiers(CG, DiL11UU)
	r686: DiL11UL() -> CG() + DiL11UU() ku68 #Modifiers(DiL11UL)
	r687: Grb2() + DiL11CU() -> DiL11LU() kbcg #Modifiers(Grb2, DiL11CU)
	r688: DiL11LU() -> Grb2() + DiL11CU() kucg #Modifiers(DiL11LU)
	r689: Grb2() + DiL11CU() -> DiL11CG() kb68 #Modifiers(Grb2, DiL11CU)
	r690: DiL11CG() -> Grb2() + DiL11CU() ku68 #Modifiers(DiL11CG)
	r691: Grb2() + DiL11LU() -> DiL11LG() kb68 #Modifiers(Grb2, DiL11LU)
	r692: DiL11LG() -> Grb2() + DiL11LU() ku68 #Modifiers(DiL11LG)
	r693: DiL11LU() -> DiL11CC() kb68P #Modifiers(DiL11LU)
	r694: DiL11CC() -> DiL11LU() ku68M #Modifiers(DiL11CC)
	r695: Cbl() + DiL11UG() -> DiL11CG() kb45 #Modifiers(Cbl, DiL11UG)
	r696: DiL11CG() -> Cbl() + DiL11UG() ku45 #Modifiers(DiL11CG)
	r697: CG() + DiL11UG() -> DiL11LG() kb45 #Modifiers(CG, DiL11UG)
	r698: DiL11LG() -> CG() + DiL11UG() ku45 #Modifiers(DiL11LG)
	r699: Cbl() + DiL11UG() -> DiL11UL() kbcg #Modifiers(Cbl, DiL11UG)
	r700: DiL11UL() -> Cbl() + DiL11UG() kucg #Modifiers(DiL11UL)
	r701: DiL11UL() -> DiL11CC() kb45P #Modifiers(DiL11UL)
	r702: DiL11CC() -> DiL11UL() ku45M #Modifiers(DiL11CC)
	r703: DiL11CG() -> DiL11CC() kbcgP #Modifiers(DiL11CG)
	r704: DiL11CC() -> DiL11CG() kucgM #Modifiers(DiL11CC)
	r705: Grb2() + DiL11CG() -> DiL11LG() kbcg #Modifiers(Grb2, DiL11CG)
	r706: DiL11LG() -> Grb2() + DiL11CG() kucg #Modifiers(DiL11LG)
	r707: Grb2() + DiL02UU() -> DiL02UG() fRate706() #Modifiers(Grb2, DiL02UU)
	r708: DiL02UG() -> Grb2() + DiL02UU() ku68 #Modifiers(DiL02UG)
	r709: CG() + DiL02UU() -> DiL02UL() fRate708() #Modifiers(CG, DiL02UU)
	r710: DiL02UL() -> CG() + DiL02UU() ku68 #Modifiers(DiL02UL)
	r711: Cbl() + DiL02UG() -> DiL02UL() kbcg #Modifiers(Cbl, DiL02UG)
	r712: DiL02UL() -> Cbl() + DiL02UG() kucg #Modifiers(DiL02UL)
	r713: Cbl() + DiL12UU() -> DiL12CU() kb45 #Modifiers(Cbl, DiL12UU)
	r714: DiL12CU() -> Cbl() + DiL12UU() ku45 #Modifiers(DiL12CU)
	r715: CG() + DiL12UU() -> DiL12LU() kb45 #Modifiers(CG, DiL12UU)
	r716: DiL12LU() -> CG() + DiL12UU() ku45 #Modifiers(DiL12LU)
	r717: Grb2() + DiL12UU() -> DiL12UG() fRate716() #Modifiers(Grb2, DiL12UU)
	r718: DiL12UG() -> Grb2() + DiL12UU() ku68 #Modifiers(DiL12UG)
	r719: CG() + DiL12UU() -> DiL12UL() fRate718() #Modifiers(CG, DiL12UU)
	r720: DiL12UL() -> CG() + DiL12UU() ku68 #Modifiers(DiL12UL)
	r721: Grb2() + DiL12CU() -> DiL12LU() kbcg #Modifiers(Grb2, DiL12CU)
	r722: DiL12LU() -> Grb2() + DiL12CU() kucg #Modifiers(DiL12LU)
	r723: Grb2() + DiL12CU() -> DiL12CG() fRate722() #Modifiers(Grb2, DiL12CU)
	r724: DiL12CG() -> Grb2() + DiL12CU() ku68 #Modifiers(DiL12CG)
	r725: Grb2() + DiL12LU() -> DiL12LG() fRate724() #Modifiers(Grb2, DiL12LU)
	r726: DiL12LG() -> Grb2() + DiL12LU() ku68 #Modifiers(DiL12LG)
	r727: DiL12LU() -> DiL12CC() fRate726() #Modifiers(DiL12LU)
	r728: DiL12CC() -> DiL12LU() ku68M #Modifiers(DiL12CC)
	r729: Cbl() + DiL12UG() -> DiL12CG() kb45 #Modifiers(Cbl, DiL12UG)
	r730: DiL12CG() -> Cbl() + DiL12UG() ku45 #Modifiers(DiL12CG)
	r731: CG() + DiL12UG() -> DiL12LG() kb45 #Modifiers(CG, DiL12UG)
	r732: DiL12LG() -> CG() + DiL12UG() ku45 #Modifiers(DiL12LG)
	r733: Cbl() + DiL12UG() -> DiL12UL() kbcg #Modifiers(Cbl, DiL12UG)
	r734: DiL12UL() -> Cbl() + DiL12UG() kucg #Modifiers(DiL12UL)
	r735: DiL12UL() -> DiL12CC() kb45P #Modifiers(DiL12UL)
	r736: DiL12CC() -> DiL12UL() ku45M #Modifiers(DiL12CC)
	r737: DiL12CG() -> DiL12CC() kbcgP #Modifiers(DiL12CG)
	r738: DiL12CC() -> DiL12CG() kucgM #Modifiers(DiL12CC)
	r739: Grb2() + DiL12CG() -> DiL12LG() kbcg #Modifiers(Grb2, DiL12CG)
	r740: DiL12LG() -> Grb2() + DiL12CG() kucg #Modifiers(DiL12LG)
	r741: Cbl() + DaL10UU() -> DaL10CU() kb45 #Modifiers(Cbl, DaL10UU)
	r742: DaL10CU() -> Cbl() + DaL10UU() ku45 #Modifiers(DaL10CU)
	r743: CG() + DaL10UU() -> DaL10LU() kb45 #Modifiers(CG, DaL10UU)
	r744: DaL10LU() -> CG() + DaL10UU() ku45 #Modifiers(DaL10LU)
	r745: Grb2() + DaL10CU() -> DaL10LU() kbcg #Modifiers(Grb2, DaL10CU)
	r746: DaL10LU() -> Grb2() + DaL10CU() kucg #Modifiers(DaL10LU)
	r747: Grb2() + DaL01UU() -> DaL01UG() kb68 #Modifiers(Grb2, DaL01UU)
	r748: DaL01UG() -> Grb2() + DaL01UU() ku68 #Modifiers(DaL01UG)
	r749: CG() + DaL01UU() -> DaL01UL() kb68 #Modifiers(CG, DaL01UU)
	r750: DaL01UL() -> CG() + DaL01UU() ku68 #Modifiers(DaL01UL)
	r751: Cbl() + DaL01UG() -> DaL01UL() kbcg #Modifiers(Cbl, DaL01UG)
	r752: DaL01UL() -> Cbl() + DaL01UG() kucg #Modifiers(DaL01UL)
	r753: Cbl() + DaL11UU() -> DaL11CU() kb45 #Modifiers(Cbl, DaL11UU)
	r754: DaL11CU() -> Cbl() + DaL11UU() ku45 #Modifiers(DaL11CU)
	r755: CG() + DaL11UU() -> DaL11LU() kb45 #Modifiers(CG, DaL11UU)
	r756: DaL11LU() -> CG() + DaL11UU() ku45 #Modifiers(DaL11LU)
	r757: Grb2() + DaL11UU() -> DaL11UG() kb68 #Modifiers(Grb2, DaL11UU)
	r758: DaL11UG() -> Grb2() + DaL11UU() ku68 #Modifiers(DaL11UG)
	r759: CG() + DaL11UU() -> DaL11UL() kb68 #Modifiers(CG, DaL11UU)
	r760: DaL11UL() -> CG() + DaL11UU() ku68 #Modifiers(DaL11UL)
	r761: Grb2() + DaL11CU() -> DaL11LU() kbcg #Modifiers(Grb2, DaL11CU)
	r762: DaL11LU() -> Grb2() + DaL11CU() kucg #Modifiers(DaL11LU)
	r763: Grb2() + DaL11CU() -> DaL11CG() kb68 #Modifiers(Grb2, DaL11CU)
	r764: DaL11CG() -> Grb2() + DaL11CU() ku68 #Modifiers(DaL11CG)
	r765: Grb2() + DaL11LU() -> DaL11LG() kb68 #Modifiers(Grb2, DaL11LU)
	r766: DaL11LG() -> Grb2() + DaL11LU() ku68 #Modifiers(DaL11LG)
	r767: DaL11LU() -> DaL11CC() kb68P #Modifiers(DaL11LU)
	r768: DaL11CC() -> DaL11LU() ku68M #Modifiers(DaL11CC)
	r769: Cbl() + DaL11UG() -> DaL11CG() kb45 #Modifiers(Cbl, DaL11UG)
	r770: DaL11CG() -> Cbl() + DaL11UG() ku45 #Modifiers(DaL11CG)
	r771: CG() + DaL11UG() -> DaL11LG() kb45 #Modifiers(CG, DaL11UG)
	r772: DaL11LG() -> CG() + DaL11UG() ku45 #Modifiers(DaL11LG)
	r773: Cbl() + DaL11UG() -> DaL11UL() kbcg #Modifiers(Cbl, DaL11UG)
	r774: DaL11UL() -> Cbl() + DaL11UG() kucg #Modifiers(DaL11UL)
	r775: DaL11UL() -> DaL11CC() kb45P #Modifiers(DaL11UL)
	r776: DaL11CC() -> DaL11UL() ku45M #Modifiers(DaL11CC)
	r777: DaL11CG() -> DaL11CC() kbcgP #Modifiers(DaL11CG)
	r778: DaL11CC() -> DaL11CG() kucgM #Modifiers(DaL11CC)
	r779: Grb2() + DaL11CG() -> DaL11LG() kbcg #Modifiers(Grb2, DaL11CG)
	r780: DaL11LG() -> Grb2() + DaL11CG() kucg #Modifiers(DaL11LG)
	r781: Grb2() + DaL02UU() -> DaL02UG() fRate780() #Modifiers(Grb2, DaL02UU)
	r782: DaL02UG() -> Grb2() + DaL02UU() ku68 #Modifiers(DaL02UG)
	r783: CG() + DaL02UU() -> DaL02UL() fRate782() #Modifiers(CG, DaL02UU)
	r784: DaL02UL() -> CG() + DaL02UU() ku68 #Modifiers(DaL02UL)
	r785: Cbl() + DaL02UG() -> DaL02UL() kbcg #Modifiers(Cbl, DaL02UG)
	r786: DaL02UL() -> Cbl() + DaL02UG() kucg #Modifiers(DaL02UL)
	r787: Cbl() + DaL12UU() -> DaL12CU() kb45 #Modifiers(Cbl, DaL12UU)
	r788: DaL12CU() -> Cbl() + DaL12UU() ku45 #Modifiers(DaL12CU)
	r789: CG() + DaL12UU() -> DaL12LU() kb45 #Modifiers(CG, DaL12UU)
	r790: DaL12LU() -> CG() + DaL12UU() ku45 #Modifiers(DaL12LU)
	r791: Grb2() + DaL12UU() -> DaL12UG() fRate790() #Modifiers(Grb2, DaL12UU)
	r792: DaL12UG() -> Grb2() + DaL12UU() ku68 #Modifiers(DaL12UG)
	r793: CG() + DaL12UU() -> DaL12UL() fRate792() #Modifiers(CG, DaL12UU)
	r794: DaL12UL() -> CG() + DaL12UU() ku68 #Modifiers(DaL12UL)
	r795: Grb2() + DaL12CU() -> DaL12LU() kbcg #Modifiers(Grb2, DaL12CU)
	r796: DaL12LU() -> Grb2() + DaL12CU() kucg #Modifiers(DaL12LU)
	r797: Grb2() + DaL12CU() -> DaL12CG() fRate796() #Modifiers(Grb2, DaL12CU)
	r798: DaL12CG() -> Grb2() + DaL12CU() ku68 #Modifiers(DaL12CG)
	r799: Grb2() + DaL12LU() -> DaL12LG() fRate798() #Modifiers(Grb2, DaL12LU)
	r800: DaL12LG() -> Grb2() + DaL12LU() ku68 #Modifiers(DaL12LG)
	r801: DaL12LU() -> DaL12CC() fRate800() #Modifiers(DaL12LU)
	r802: DaL12CC() -> DaL12LU() ku68M #Modifiers(DaL12CC)
	r803: Cbl() + DaL12UG() -> DaL12CG() kb45 #Modifiers(Cbl, DaL12UG)
	r804: DaL12CG() -> Cbl() + DaL12UG() ku45 #Modifiers(DaL12CG)
	r805: CG() + DaL12UG() -> DaL12LG() kb45 #Modifiers(CG, DaL12UG)
	r806: DaL12LG() -> CG() + DaL12UG() ku45 #Modifiers(DaL12LG)
	r807: Cbl() + DaL12UG() -> DaL12UL() kbcg #Modifiers(Cbl, DaL12UG)
	r808: DaL12UL() -> Cbl() + DaL12UG() kucg #Modifiers(DaL12UL)
	r809: DaL12UL() -> DaL12CC() kb45P #Modifiers(DaL12UL)
	r810: DaL12CC() -> DaL12UL() ku45M #Modifiers(DaL12CC)
	r811: DaL12CG() -> DaL12CC() kbcgP #Modifiers(DaL12CG)
	r812: DaL12CC() -> DaL12CG() kucgM #Modifiers(DaL12CC)
	r813: Grb2() + DaL12CG() -> DaL12LG() kbcg #Modifiers(Grb2, DaL12CG)
	r814: DaL12LG() -> Grb2() + DaL12CG() kucg #Modifiers(DaL12LG)
	r815: R00UU() -> Rc00UU() kc #Modifiers(R00UU)
	r816: R10UU() -> Rc10UU() kc #Modifiers(R10UU)
	r817: R10CU() -> Rc10CU() kc #Modifiers(R10CU)
	r818: R10LU() -> Rc10LU() kc #Modifiers(R10LU)
	r819: R01UU() -> Rc01UU() kc #Modifiers(R01UU)
	r820: R01UG() -> Rc01UG() kc #Modifiers(R01UG)
	r821: R01UL() -> Rc01UL() kc #Modifiers(R01UL)
	r822: R11UU() -> Rc11UU() kc #Modifiers(R11UU)
	r823: R11CU() -> Rc11CU() kc #Modifiers(R11CU)
	r824: R11LU() -> Rc11LU() kc #Modifiers(R11LU)
	r825: R11UG() -> Rc11UG() kc #Modifiers(R11UG)
	r826: R11UL() -> Rc11UL() kc #Modifiers(R11UL)
	r827: R11CG() -> Rc11CG() kc #Modifiers(R11CG)
	r828: R11CC() -> Rc11CC() kc #Modifiers(R11CC)
	r829: R11LG() -> Rc11LG() kc #Modifiers(R11LG)
	r830: R02UU() -> Rc02UU() kc #Modifiers(R02UU)
	r831: R02UG() -> Rc02UG() kc #Modifiers(R02UG)
	r832: R02UL() -> Rc02UL() kc #Modifiers(R02UL)
	r833: R12UU() -> Rc12UU() kc #Modifiers(R12UU)
	r834: R12CU() -> Rc12CU() kc #Modifiers(R12CU)
	r835: R12LU() -> Rc12LU() kc #Modifiers(R12LU)
	r836: R12UG() -> Rc12UG() kc #Modifiers(R12UG)
	r837: R12UL() -> Rc12UL() kc #Modifiers(R12UL)
	r838: R12CG() -> Rc12CG() kc #Modifiers(R12CG)
	r839: R12CC() -> Rc12CC() kc #Modifiers(R12CC)
	r840: R12LG() -> Rc12LG() kc #Modifiers(R12LG)
	r841: Rc00UU() -> R00UU() ko #Modifiers(Rc00UU)
	r842: Rc10UU() -> R10UU() ko #Modifiers(Rc10UU)
	r843: Rc10CU() -> R10CU() ko #Modifiers(Rc10CU)
	r844: Rc10LU() -> R10LU() ko #Modifiers(Rc10LU)
	r845: Rc01UU() -> R01UU() ko #Modifiers(Rc01UU)
	r846: Rc01UG() -> R01UG() ko #Modifiers(Rc01UG)
	r847: Rc01UL() -> R01UL() ko #Modifiers(Rc01UL)
	r848: Rc11UU() -> R11UU() ko #Modifiers(Rc11UU)
	r849: Rc11CU() -> R11CU() ko #Modifiers(Rc11CU)
	r850: Rc11LU() -> R11LU() ko #Modifiers(Rc11LU)
	r851: Rc11UG() -> R11UG() ko #Modifiers(Rc11UG)
	r852: Rc11UL() -> R11UL() ko #Modifiers(Rc11UL)
	r853: Rc11CG() -> R11CG() ko #Modifiers(Rc11CG)
	r854: Rc11CC() -> R11CC() ko #Modifiers(Rc11CC)
	r855: Rc11LG() -> R11LG() ko #Modifiers(Rc11LG)
	r856: Rc02UU() -> R02UU() ko #Modifiers(Rc02UU)
	r857: Rc02UG() -> R02UG() ko #Modifiers(Rc02UG)
	r858: Rc02UL() -> R02UL() ko #Modifiers(Rc02UL)
	r859: Rc12UU() -> R12UU() ko #Modifiers(Rc12UU)
	r860: Rc12CU() -> R12CU() ko #Modifiers(Rc12CU)
	r861: Rc12LU() -> R12LU() ko #Modifiers(Rc12LU)
	r862: Rc12UG() -> R12UG() ko #Modifiers(Rc12UG)
	r863: Rc12UL() -> R12UL() ko #Modifiers(Rc12UL)
	r864: Rc12CG() -> R12CG() ko #Modifiers(Rc12CG)
	r865: Rc12CC() -> R12CC() ko #Modifiers(Rc12CC)
	r866: Rc12LG() -> R12LG() ko #Modifiers(Rc12LG)
	r867: RL00UU() -> RcL00UU() k1c #Modifiers(RL00UU)
	r868: RL10UU() -> RcL10UU() k1c #Modifiers(RL10UU)
	r869: RL10CU() -> RcL10CU() k1c #Modifiers(RL10CU)
	r870: RL10LU() -> RcL10LU() k1c #Modifiers(RL10LU)
	r871: RL01UU() -> RcL01UU() k1c #Modifiers(RL01UU)
	r872: RL01UG() -> RcL01UG() k1c #Modifiers(RL01UG)
	r873: RL01UL() -> RcL01UL() k1c #Modifiers(RL01UL)
	r874: RL11UU() -> RcL11UU() k1c #Modifiers(RL11UU)
	r875: RL11CU() -> RcL11CU() k1c #Modifiers(RL11CU)
	r876: RL11LU() -> RcL11LU() k1c #Modifiers(RL11LU)
	r877: RL11UG() -> RcL11UG() k1c #Modifiers(RL11UG)
	r878: RL11UL() -> RcL11UL() k1c #Modifiers(RL11UL)
	r879: RL11CG() -> RcL11CG() k1c #Modifiers(RL11CG)
	r880: RL11CC() -> RcL11CC() k1c #Modifiers(RL11CC)
	r881: RL11LG() -> RcL11LG() k1c #Modifiers(RL11LG)
	r882: RL02UU() -> RcL02UU() k1c #Modifiers(RL02UU)
	r883: RL02UG() -> RcL02UG() k1c #Modifiers(RL02UG)
	r884: RL02UL() -> RcL02UL() k1c #Modifiers(RL02UL)
	r885: RL12UU() -> RcL12UU() k1c #Modifiers(RL12UU)
	r886: RL12CU() -> RcL12CU() k1c #Modifiers(RL12CU)
	r887: RL12LU() -> RcL12LU() k1c #Modifiers(RL12LU)
	r888: RL12UG() -> RcL12UG() k1c #Modifiers(RL12UG)
	r889: RL12UL() -> RcL12UL() k1c #Modifiers(RL12UL)
	r890: RL12CG() -> RcL12CG() k1c #Modifiers(RL12CG)
	r891: RL12CC() -> RcL12CC() k1c #Modifiers(RL12CC)
	r892: RL12LG() -> RcL12LG() k1c #Modifiers(RL12LG)
	r893: RcL00UU() -> RL00UU() k1o #Modifiers(RcL00UU)
	r894: RcL10UU() -> RL10UU() k1o #Modifiers(RcL10UU)
	r895: RcL10CU() -> RL10CU() k1o #Modifiers(RcL10CU)
	r896: RcL10LU() -> RL10LU() k1o #Modifiers(RcL10LU)
	r897: RcL01UU() -> RL01UU() k1o #Modifiers(RcL01UU)
	r898: RcL01UG() -> RL01UG() k1o #Modifiers(RcL01UG)
	r899: RcL01UL() -> RL01UL() k1o #Modifiers(RcL01UL)
	r900: RcL11UU() -> RL11UU() k1o #Modifiers(RcL11UU)
	r901: RcL11CU() -> RL11CU() k1o #Modifiers(RcL11CU)
	r902: RcL11LU() -> RL11LU() k1o #Modifiers(RcL11LU)
	r903: RcL11UG() -> RL11UG() k1o #Modifiers(RcL11UG)
	r904: RcL11UL() -> RL11UL() k1o #Modifiers(RcL11UL)
	r905: RcL11CG() -> RL11CG() k1o #Modifiers(RcL11CG)
	r906: RcL11CC() -> RL11CC() k1o #Modifiers(RcL11CC)
	r907: RcL11LG() -> RL11LG() k1o #Modifiers(RcL11LG)
	r908: RcL02UU() -> RL02UU() k1o #Modifiers(RcL02UU)
	r909: RcL02UG() -> RL02UG() k1o #Modifiers(RcL02UG)
	r910: RcL02UL() -> RL02UL() k1o #Modifiers(RcL02UL)
	r911: RcL12UU() -> RL12UU() k1o #Modifiers(RcL12UU)
	r912: RcL12CU() -> RL12CU() k1o #Modifiers(RcL12CU)
	r913: RcL12LU() -> RL12LU() k1o #Modifiers(RcL12LU)
	r914: RcL12UG() -> RL12UG() k1o #Modifiers(RcL12UG)
	r915: RcL12UL() -> RL12UL() k1o #Modifiers(RcL12UL)
	r916: RcL12CG() -> RL12CG() k1o #Modifiers(RcL12CG)
	r917: RcL12CC() -> RL12CC() k1o #Modifiers(RcL12CC)
	r918: RcL12LG() -> RL12LG() k1o #Modifiers(RcL12LG)
	r919: R00UU() + L() -> RL00UU() kb #Modifiers(R00UU, L)
	r920: R10UU() + L() -> RL10UU() kb #Modifiers(R10UU, L)
	r921: R10CU() + L() -> RL10CU() kb #Modifiers(R10CU, L)
	r922: R10LU() + L() -> RL10LU() kb #Modifiers(R10LU, L)
	r923: R01UU() + L() -> RL01UU() kb #Modifiers(R01UU, L)
	r924: R01UG() + L() -> RL01UG() kb #Modifiers(R01UG, L)
	r925: R01UL() + L() -> RL01UL() kb #Modifiers(R01UL, L)
	r926: R11UU() + L() -> RL11UU() kb #Modifiers(R11UU, L)
	r927: R11CU() + L() -> RL11CU() kb #Modifiers(R11CU, L)
	r928: R11LU() + L() -> RL11LU() kb #Modifiers(R11LU, L)
	r929: R11UG() + L() -> RL11UG() kb #Modifiers(R11UG, L)
	r930: R11UL() + L() -> RL11UL() kb #Modifiers(R11UL, L)
	r931: R11CG() + L() -> RL11CG() kb #Modifiers(R11CG, L)
	r932: R11CC() + L() -> RL11CC() kb #Modifiers(R11CC, L)
	r933: R11LG() + L() -> RL11LG() kb #Modifiers(R11LG, L)
	r934: R02UU() + L() -> RL02UU() kb #Modifiers(R02UU, L)
	r935: R02UG() + L() -> RL02UG() kb #Modifiers(R02UG, L)
	r936: R02UL() + L() -> RL02UL() kb #Modifiers(R02UL, L)
	r937: R12UU() + L() -> RL12UU() kb #Modifiers(R12UU, L)
	r938: R12CU() + L() -> RL12CU() kb #Modifiers(R12CU, L)
	r939: R12LU() + L() -> RL12LU() kb #Modifiers(R12LU, L)
	r940: R12UG() + L() -> RL12UG() kb #Modifiers(R12UG, L)
	r941: R12UL() + L() -> RL12UL() kb #Modifiers(R12UL, L)
	r942: R12CG() + L() -> RL12CG() kb #Modifiers(R12CG, L)
	r943: R12CC() + L() -> RL12CC() kb #Modifiers(R12CC, L)
	r944: R12LG() + L() -> RL12LG() kb #Modifiers(R12LG, L)
	r945: Rc00UU() + L() -> RcL00UU() k1b #Modifiers(Rc00UU, L)
	r946: Rc10UU() + L() -> RcL10UU() k1b #Modifiers(Rc10UU, L)
	r947: Rc10CU() + L() -> RcL10CU() k1b #Modifiers(Rc10CU, L)
	r948: Rc10LU() + L() -> RcL10LU() k1b #Modifiers(Rc10LU, L)
	r949: Rc01UU() + L() -> RcL01UU() k1b #Modifiers(Rc01UU, L)
	r950: Rc01UG() + L() -> RcL01UG() k1b #Modifiers(Rc01UG, L)
	r951: Rc01UL() + L() -> RcL01UL() k1b #Modifiers(Rc01UL, L)
	r952: Rc11UU() + L() -> RcL11UU() k1b #Modifiers(Rc11UU, L)
	r953: Rc11CU() + L() -> RcL11CU() k1b #Modifiers(Rc11CU, L)
	r954: Rc11LU() + L() -> RcL11LU() k1b #Modifiers(Rc11LU, L)
	r955: Rc11UG() + L() -> RcL11UG() k1b #Modifiers(Rc11UG, L)
	r956: Rc11UL() + L() -> RcL11UL() k1b #Modifiers(Rc11UL, L)
	r957: Rc11CG() + L() -> RcL11CG() k1b #Modifiers(Rc11CG, L)
	r958: Rc11CC() + L() -> RcL11CC() k1b #Modifiers(Rc11CC, L)
	r959: Rc11LG() + L() -> RcL11LG() k1b #Modifiers(Rc11LG, L)
	r960: Rc02UU() + L() -> RcL02UU() k1b #Modifiers(Rc02UU, L)
	r961: Rc02UG() + L() -> RcL02UG() k1b #Modifiers(Rc02UG, L)
	r962: Rc02UL() + L() -> RcL02UL() k1b #Modifiers(Rc02UL, L)
	r963: Rc12UU() + L() -> RcL12UU() k1b #Modifiers(Rc12UU, L)
	r964: Rc12CU() + L() -> RcL12CU() k1b #Modifiers(Rc12CU, L)
	r965: Rc12LU() + L() -> RcL12LU() k1b #Modifiers(Rc12LU, L)
	r966: Rc12UG() + L() -> RcL12UG() k1b #Modifiers(Rc12UG, L)
	r967: Rc12UL() + L() -> RcL12UL() k1b #Modifiers(Rc12UL, L)
	r968: Rc12CG() + L() -> RcL12CG() k1b #Modifiers(Rc12CG, L)
	r969: Rc12CC() + L() -> RcL12CC() k1b #Modifiers(Rc12CC, L)
	r970: Rc12LG() + L() -> RcL12LG() k1b #Modifiers(Rc12LG, L)
	r971: Di00UU() -> Da00UU() fRate970() #Modifiers(L, Di00UU, L)
	r972: Di10UU() -> Da10UU() fRate971() #Modifiers(L, Di10UU, L)
	r973: Di10CU() -> Da10CU() fRate972() #Modifiers(L, Di10CU, L)
	r974: Di10LU() -> Da10LU() fRate973() #Modifiers(L, Di10LU, L)
	r975: Di01UU() -> Da01UU() fRate974() #Modifiers(L, Di01UU, L)
	r976: Di01UG() -> Da01UG() fRate975() #Modifiers(L, Di01UG, L)
	r977: Di01UL() -> Da01UL() fRate976() #Modifiers(L, Di01UL, L)
	r978: Di11UU() -> Da11UU() fRate977() #Modifiers(L, Di11UU, L)
	r979: Di11CU() -> Da11CU() fRate978() #Modifiers(L, Di11CU, L)
	r980: Di11LU() -> Da11LU() fRate979() #Modifiers(L, Di11LU, L)
	r981: Di11UG() -> Da11UG() fRate980() #Modifiers(L, Di11UG, L)
	r982: Di11UL() -> Da11UL() fRate981() #Modifiers(L, Di11UL, L)
	r983: Di11CG() -> Da11CG() fRate982() #Modifiers(L, Di11CG, L)
	r984: Di11CC() -> Da11CC() fRate983() #Modifiers(L, Di11CC, L)
	r985: Di11LG() -> Da11LG() fRate984() #Modifiers(L, Di11LG, L)
	r986: Di02UU() -> Da02UU() fRate985() #Modifiers(L, Di02UU, L)
	r987: Di02UG() -> Da02UG() fRate986() #Modifiers(L, Di02UG, L)
	r988: Di02UL() -> Da02UL() fRate987() #Modifiers(L, Di02UL, L)
	r989: Di12UU() -> Da12UU() fRate988() #Modifiers(L, Di12UU, L)
	r990: Di12CU() -> Da12CU() fRate989() #Modifiers(L, Di12CU, L)
	r991: Di12LU() -> Da12LU() fRate990() #Modifiers(L, Di12LU, L)
	r992: Di12UG() -> Da12UG() fRate991() #Modifiers(L, Di12UG, L)
	r993: Di12UL() -> Da12UL() fRate992() #Modifiers(L, Di12UL, L)
	r994: Di12CG() -> Da12CG() fRate993() #Modifiers(L, Di12CG, L)
	r995: Di12CC() -> Da12CC() fRate994() #Modifiers(L, Di12CC, L)
	r996: Di12LG() -> Da12LG() fRate995() #Modifiers(L, Di12LG, L)
	r997: Di00UU() + L() -> DiL00UU() kb #Modifiers(Di00UU, L)
	r998: Di10UU() + L() -> DiL10UU() kb #Modifiers(Di10UU, L)
	r999: Di10CU() + L() -> DiL10CU() kb #Modifiers(Di10CU, L)
	r1000: Di10LU() + L() -> DiL10LU() kb #Modifiers(Di10LU, L)
	r1001: Di01UU() + L() -> DiL01UU() kb #Modifiers(Di01UU, L)
	r1002: Di01UG() + L() -> DiL01UG() kb #Modifiers(Di01UG, L)
	r1003: Di01UL() + L() -> DiL01UL() kb #Modifiers(Di01UL, L)
	r1004: Di11UU() + L() -> DiL11UU() kb #Modifiers(Di11UU, L)
	r1005: Di11CU() + L() -> DiL11CU() kb #Modifiers(Di11CU, L)
	r1006: Di11LU() + L() -> DiL11LU() kb #Modifiers(Di11LU, L)
	r1007: Di11UG() + L() -> DiL11UG() kb #Modifiers(Di11UG, L)
	r1008: Di11UL() + L() -> DiL11UL() kb #Modifiers(Di11UL, L)
	r1009: Di11CG() + L() -> DiL11CG() kb #Modifiers(Di11CG, L)
	r1010: Di11CC() + L() -> DiL11CC() kb #Modifiers(Di11CC, L)
	r1011: Di11LG() + L() -> DiL11LG() kb #Modifiers(Di11LG, L)
	r1012: Di02UU() + L() -> DiL02UU() kb #Modifiers(Di02UU, L)
	r1013: Di02UG() + L() -> DiL02UG() kb #Modifiers(Di02UG, L)
	r1014: Di02UL() + L() -> DiL02UL() kb #Modifiers(Di02UL, L)
	r1015: Di12UU() + L() -> DiL12UU() kb #Modifiers(Di12UU, L)
	r1016: Di12CU() + L() -> DiL12CU() kb #Modifiers(Di12CU, L)
	r1017: Di12LU() + L() -> DiL12LU() kb #Modifiers(Di12LU, L)
	r1018: Di12UG() + L() -> DiL12UG() kb #Modifiers(Di12UG, L)
	r1019: Di12UL() + L() -> DiL12UL() kb #Modifiers(Di12UL, L)
	r1020: Di12CG() + L() -> DiL12CG() kb #Modifiers(Di12CG, L)
	r1021: Di12CC() + L() -> DiL12CC() kb #Modifiers(Di12CC, L)
	r1022: Di12LG() + L() -> DiL12LG() kb #Modifiers(Di12LG, L)
	r1023: Da00UU() + L() -> DaL00UU() kb #Modifiers(Da00UU, L)
	r1024: Da10UU() + L() -> DaL10UU() kb #Modifiers(Da10UU, L)
	r1025: Da10CU() + L() -> DaL10CU() kb #Modifiers(Da10CU, L)
	r1026: Da10LU() + L() -> DaL10LU() kb #Modifiers(Da10LU, L)
	r1027: Da01UU() + L() -> DaL01UU() kb #Modifiers(Da01UU, L)
	r1028: Da01UG() + L() -> DaL01UG() kb #Modifiers(Da01UG, L)
	r1029: Da01UL() + L() -> DaL01UL() kb #Modifiers(Da01UL, L)
	r1030: Da11UU() + L() -> DaL11UU() kb #Modifiers(Da11UU, L)
	r1031: Da11CU() + L() -> DaL11CU() kb #Modifiers(Da11CU, L)
	r1032: Da11LU() + L() -> DaL11LU() kb #Modifiers(Da11LU, L)
	r1033: Da11UG() + L() -> DaL11UG() kb #Modifiers(Da11UG, L)
	r1034: Da11UL() + L() -> DaL11UL() kb #Modifiers(Da11UL, L)
	r1035: Da11CG() + L() -> DaL11CG() kb #Modifiers(Da11CG, L)
	r1036: Da11CC() + L() -> DaL11CC() kb #Modifiers(Da11CC, L)
	r1037: Da11LG() + L() -> DaL11LG() kb #Modifiers(Da11LG, L)
	r1038: Da02UU() + L() -> DaL02UU() kb #Modifiers(Da02UU, L)
	r1039: Da02UG() + L() -> DaL02UG() kb #Modifiers(Da02UG, L)
	r1040: Da02UL() + L() -> DaL02UL() kb #Modifiers(Da02UL, L)
	r1041: Da12UU() + L() -> DaL12UU() kb #Modifiers(Da12UU, L)
	r1042: Da12CU() + L() -> DaL12CU() kb #Modifiers(Da12CU, L)
	r1043: Da12LU() + L() -> DaL12LU() kb #Modifiers(Da12LU, L)
	r1044: Da12UG() + L() -> DaL12UG() kb #Modifiers(Da12UG, L)
	r1045: Da12UL() + L() -> DaL12UL() kb #Modifiers(Da12UL, L)
	r1046: Da12CG() + L() -> DaL12CG() kb #Modifiers(Da12CG, L)
	r1047: Da12CC() + L() -> DaL12CC() kb #Modifiers(Da12CC, L)
	r1048: Da12LG() + L() -> DaL12LG() kb #Modifiers(Da12LG, L)
	r1049: DiL00UU() -> DaL00UU() fRate1048() #Modifiers(L, DiL00UU, L)
	r1050: DiL10UU() -> DaL10UU() fRate1049() #Modifiers(L, DiL10UU, L)
	r1051: DiL10CU() -> DaL10CU() fRate1050() #Modifiers(L, DiL10CU, L)
	r1052: DiL10LU() -> DaL10LU() fRate1051() #Modifiers(L, DiL10LU, L)
	r1053: DiL01UU() -> DaL01UU() fRate1052() #Modifiers(L, DiL01UU, L)
	r1054: DiL01UG() -> DaL01UG() fRate1053() #Modifiers(L, DiL01UG, L)
	r1055: DiL01UL() -> DaL01UL() fRate1054() #Modifiers(L, DiL01UL, L)
	r1056: DiL11UU() -> DaL11UU() fRate1055() #Modifiers(L, DiL11UU, L)
	r1057: DiL11CU() -> DaL11CU() fRate1056() #Modifiers(L, DiL11CU, L)
	r1058: DiL11LU() -> DaL11LU() fRate1057() #Modifiers(L, DiL11LU, L)
	r1059: DiL11UG() -> DaL11UG() fRate1058() #Modifiers(L, DiL11UG, L)
	r1060: DiL11UL() -> DaL11UL() fRate1059() #Modifiers(L, DiL11UL, L)
	r1061: DiL11CG() -> DaL11CG() fRate1060() #Modifiers(L, DiL11CG, L)
	r1062: DiL11CC() -> DaL11CC() fRate1061() #Modifiers(L, DiL11CC, L)
	r1063: DiL11LG() -> DaL11LG() fRate1062() #Modifiers(L, DiL11LG, L)
	r1064: DiL02UU() -> DaL02UU() fRate1063() #Modifiers(L, DiL02UU, L)
	r1065: DiL02UG() -> DaL02UG() fRate1064() #Modifiers(L, DiL02UG, L)
	r1066: DiL02UL() -> DaL02UL() fRate1065() #Modifiers(L, DiL02UL, L)
	r1067: DiL12UU() -> DaL12UU() fRate1066() #Modifiers(L, DiL12UU, L)
	r1068: DiL12CU() -> DaL12CU() fRate1067() #Modifiers(L, DiL12CU, L)
	r1069: DiL12LU() -> DaL12LU() fRate1068() #Modifiers(L, DiL12LU, L)
	r1070: DiL12UG() -> DaL12UG() fRate1069() #Modifiers(L, DiL12UG, L)
	r1071: DiL12UL() -> DaL12UL() fRate1070() #Modifiers(L, DiL12UL, L)
	r1072: DiL12CG() -> DaL12CG() fRate1071() #Modifiers(L, DiL12CG, L)
	r1073: DiL12CC() -> DaL12CC() fRate1072() #Modifiers(L, DiL12CC, L)
	r1074: DiL12LG() -> DaL12LG() fRate1073() #Modifiers(L, DiL12LG, L)
	r1075: RL00UU() -> R00UU() + L() ku #Modifiers(RL00UU)
	r1076: RL10UU() -> R10UU() + L() ku #Modifiers(RL10UU)
	r1077: RL10CU() -> R10CU() + L() ku #Modifiers(RL10CU)
	r1078: RL10LU() -> R10LU() + L() ku #Modifiers(RL10LU)
	r1079: RL01UU() -> R01UU() + L() ku #Modifiers(RL01UU)
	r1080: RL01UG() -> R01UG() + L() ku #Modifiers(RL01UG)
	r1081: RL01UL() -> R01UL() + L() ku #Modifiers(RL01UL)
	r1082: RL11UU() -> R11UU() + L() ku #Modifiers(RL11UU)
	r1083: RL11CU() -> R11CU() + L() ku #Modifiers(RL11CU)
	r1084: RL11LU() -> R11LU() + L() ku #Modifiers(RL11LU)
	r1085: RL11UG() -> R11UG() + L() ku #Modifiers(RL11UG)
	r1086: RL11UL() -> R11UL() + L() ku #Modifiers(RL11UL)
	r1087: RL11CG() -> R11CG() + L() ku #Modifiers(RL11CG)
	r1088: RL11CC() -> R11CC() + L() ku #Modifiers(RL11CC)
	r1089: RL11LG() -> R11LG() + L() ku #Modifiers(RL11LG)
	r1090: RL02UU() -> R02UU() + L() ku #Modifiers(RL02UU)
	r1091: RL02UG() -> R02UG() + L() ku #Modifiers(RL02UG)
	r1092: RL02UL() -> R02UL() + L() ku #Modifiers(RL02UL)
	r1093: RL12UU() -> R12UU() + L() ku #Modifiers(RL12UU)
	r1094: RL12CU() -> R12CU() + L() ku #Modifiers(RL12CU)
	r1095: RL12LU() -> R12LU() + L() ku #Modifiers(RL12LU)
	r1096: RL12UG() -> R12UG() + L() ku #Modifiers(RL12UG)
	r1097: RL12UL() -> R12UL() + L() ku #Modifiers(RL12UL)
	r1098: RL12CG() -> R12CG() + L() ku #Modifiers(RL12CG)
	r1099: RL12CC() -> R12CC() + L() ku #Modifiers(RL12CC)
	r1100: RL12LG() -> R12LG() + L() ku #Modifiers(RL12LG)
	r1101: RcL00UU() -> Rc00UU() + L() k1u #Modifiers(RcL00UU)
	r1102: RcL10UU() -> Rc10UU() + L() k1u #Modifiers(RcL10UU)
	r1103: RcL10CU() -> Rc10CU() + L() k1u #Modifiers(RcL10CU)
	r1104: RcL10LU() -> Rc10LU() + L() k1u #Modifiers(RcL10LU)
	r1105: RcL01UU() -> Rc01UU() + L() k1u #Modifiers(RcL01UU)
	r1106: RcL01UG() -> Rc01UG() + L() k1u #Modifiers(RcL01UG)
	r1107: RcL01UL() -> Rc01UL() + L() k1u #Modifiers(RcL01UL)
	r1108: RcL11UU() -> Rc11UU() + L() k1u #Modifiers(RcL11UU)
	r1109: RcL11CU() -> Rc11CU() + L() k1u #Modifiers(RcL11CU)
	r1110: RcL11LU() -> Rc11LU() + L() k1u #Modifiers(RcL11LU)
	r1111: RcL11UG() -> Rc11UG() + L() k1u #Modifiers(RcL11UG)
	r1112: RcL11UL() -> Rc11UL() + L() k1u #Modifiers(RcL11UL)
	r1113: RcL11CG() -> Rc11CG() + L() k1u #Modifiers(RcL11CG)
	r1114: RcL11CC() -> Rc11CC() + L() k1u #Modifiers(RcL11CC)
	r1115: RcL11LG() -> Rc11LG() + L() k1u #Modifiers(RcL11LG)
	r1116: RcL02UU() -> Rc02UU() + L() k1u #Modifiers(RcL02UU)
	r1117: RcL02UG() -> Rc02UG() + L() k1u #Modifiers(RcL02UG)
	r1118: RcL02UL() -> Rc02UL() + L() k1u #Modifiers(RcL02UL)
	r1119: RcL12UU() -> Rc12UU() + L() k1u #Modifiers(RcL12UU)
	r1120: RcL12CU() -> Rc12CU() + L() k1u #Modifiers(RcL12CU)
	r1121: RcL12LU() -> Rc12LU() + L() k1u #Modifiers(RcL12LU)
	r1122: RcL12UG() -> Rc12UG() + L() k1u #Modifiers(RcL12UG)
	r1123: RcL12UL() -> Rc12UL() + L() k1u #Modifiers(RcL12UL)
	r1124: RcL12CG() -> Rc12CG() + L() k1u #Modifiers(RcL12CG)
	r1125: RcL12CC() -> Rc12CC() + L() k1u #Modifiers(RcL12CC)
	r1126: RcL12LG() -> Rc12LG() + L() k1u #Modifiers(RcL12LG)
	r1127: DaL00UU() -> DiL00UU() ku #Modifiers(DaL00UU)
	r1128: DaL10UU() -> DiL10UU() ku #Modifiers(DaL10UU)
	r1129: DaL10CU() -> DiL10CU() ku #Modifiers(DaL10CU)
	r1130: DaL10LU() -> DiL10LU() ku #Modifiers(DaL10LU)
	r1131: DaL01UU() -> DiL01UU() ku #Modifiers(DaL01UU)
	r1132: DaL01UG() -> DiL01UG() ku #Modifiers(DaL01UG)
	r1133: DaL01UL() -> DiL01UL() ku #Modifiers(DaL01UL)
	r1134: DaL11UU() -> DiL11UU() ku #Modifiers(DaL11UU)
	r1135: DaL11CU() -> DiL11CU() ku #Modifiers(DaL11CU)
	r1136: DaL11LU() -> DiL11LU() ku #Modifiers(DaL11LU)
	r1137: DaL11UG() -> DiL11UG() ku #Modifiers(DaL11UG)
	r1138: DaL11UL() -> DiL11UL() ku #Modifiers(DaL11UL)
	r1139: DaL11CG() -> DiL11CG() ku #Modifiers(DaL11CG)
	r1140: DaL11CC() -> DiL11CC() ku #Modifiers(DaL11CC)
	r1141: DaL11LG() -> DiL11LG() ku #Modifiers(DaL11LG)
	r1142: DaL02UU() -> DiL02UU() ku #Modifiers(DaL02UU)
	r1143: DaL02UG() -> DiL02UG() ku #Modifiers(DaL02UG)
	r1144: DaL02UL() -> DiL02UL() ku #Modifiers(DaL02UL)
	r1145: DaL12UU() -> DiL12UU() ku #Modifiers(DaL12UU)
	r1146: DaL12CU() -> DiL12CU() ku #Modifiers(DaL12CU)
	r1147: DaL12LU() -> DiL12LU() ku #Modifiers(DaL12LU)
	r1148: DaL12UG() -> DiL12UG() ku #Modifiers(DaL12UG)
	r1149: DaL12UL() -> DiL12UL() ku #Modifiers(DaL12UL)
	r1150: DaL12CG() -> DiL12CG() ku #Modifiers(DaL12CG)
	r1151: DaL12CC() -> DiL12CC() ku #Modifiers(DaL12CC)
	r1152: DaL12LG() -> DiL12LG() ku #Modifiers(DaL12LG)
	r1153: DaL00UU() -> Da00UU() + L() ku #Modifiers(DaL00UU)
	r1154: DaL10UU() -> Da10UU() + L() ku #Modifiers(DaL10UU)
	r1155: DaL10CU() -> Da10CU() + L() ku #Modifiers(DaL10CU)
	r1156: DaL10LU() -> Da10LU() + L() ku #Modifiers(DaL10LU)
	r1157: DaL01UU() -> Da01UU() + L() ku #Modifiers(DaL01UU)
	r1158: DaL01UG() -> Da01UG() + L() ku #Modifiers(DaL01UG)
	r1159: DaL01UL() -> Da01UL() + L() ku #Modifiers(DaL01UL)
	r1160: DaL11UU() -> Da11UU() + L() ku #Modifiers(DaL11UU)
	r1161: DaL11CU() -> Da11CU() + L() ku #Modifiers(DaL11CU)
	r1162: DaL11LU() -> Da11LU() + L() ku #Modifiers(DaL11LU)
	r1163: DaL11UG() -> Da11UG() + L() ku #Modifiers(DaL11UG)
	r1164: DaL11UL() -> Da11UL() + L() ku #Modifiers(DaL11UL)
	r1165: DaL11CG() -> Da11CG() + L() ku #Modifiers(DaL11CG)
	r1166: DaL11CC() -> Da11CC() + L() ku #Modifiers(DaL11CC)
	r1167: DaL11LG() -> Da11LG() + L() ku #Modifiers(DaL11LG)
	r1168: DaL02UU() -> Da02UU() + L() ku #Modifiers(DaL02UU)
	r1169: DaL02UG() -> Da02UG() + L() ku #Modifiers(DaL02UG)
	r1170: DaL02UL() -> Da02UL() + L() ku #Modifiers(DaL02UL)
	r1171: DaL12UU() -> Da12UU() + L() ku #Modifiers(DaL12UU)
	r1172: DaL12CU() -> Da12CU() + L() ku #Modifiers(DaL12CU)
	r1173: DaL12LU() -> Da12LU() + L() ku #Modifiers(DaL12LU)
	r1174: DaL12UG() -> Da12UG() + L() ku #Modifiers(DaL12UG)
	r1175: DaL12UL() -> Da12UL() + L() ku #Modifiers(DaL12UL)
	r1176: DaL12CG() -> Da12CG() + L() ku #Modifiers(DaL12CG)
	r1177: DaL12CC() -> Da12CC() + L() ku #Modifiers(DaL12CC)
	r1178: DaL12LG() -> Da12LG() + L() ku #Modifiers(DaL12LG)
	r1179: Da00UU() -> Di00UU() ku #Modifiers(Da00UU)
	r1180: Da10UU() -> Di10UU() ku #Modifiers(Da10UU)
	r1181: Da10CU() -> Di10CU() ku #Modifiers(Da10CU)
	r1182: Da10LU() -> Di10LU() ku #Modifiers(Da10LU)
	r1183: Da01UU() -> Di01UU() ku #Modifiers(Da01UU)
	r1184: Da01UG() -> Di01UG() ku #Modifiers(Da01UG)
	r1185: Da01UL() -> Di01UL() ku #Modifiers(Da01UL)
	r1186: Da11UU() -> Di11UU() ku #Modifiers(Da11UU)
	r1187: Da11CU() -> Di11CU() ku #Modifiers(Da11CU)
	r1188: Da11LU() -> Di11LU() ku #Modifiers(Da11LU)
	r1189: Da11UG() -> Di11UG() ku #Modifiers(Da11UG)
	r1190: Da11UL() -> Di11UL() ku #Modifiers(Da11UL)
	r1191: Da11CG() -> Di11CG() ku #Modifiers(Da11CG)
	r1192: Da11CC() -> Di11CC() ku #Modifiers(Da11CC)
	r1193: Da11LG() -> Di11LG() ku #Modifiers(Da11LG)
	r1194: Da02UU() -> Di02UU() ku #Modifiers(Da02UU)
	r1195: Da02UG() -> Di02UG() ku #Modifiers(Da02UG)
	r1196: Da02UL() -> Di02UL() ku #Modifiers(Da02UL)
	r1197: Da12UU() -> Di12UU() ku #Modifiers(Da12UU)
	r1198: Da12CU() -> Di12CU() ku #Modifiers(Da12CU)
	r1199: Da12LU() -> Di12LU() ku #Modifiers(Da12LU)
	r1200: Da12UG() -> Di12UG() ku #Modifiers(Da12UG)
	r1201: Da12UL() -> Di12UL() ku #Modifiers(Da12UL)
	r1202: Da12CG() -> Di12CG() ku #Modifiers(Da12CG)
	r1203: Da12CC() -> Di12CC() ku #Modifiers(Da12CC)
	r1204: Da12LG() -> Di12LG() ku #Modifiers(Da12LG)
	r1205: DiL00UU() -> Di00UU() + L() ku #Modifiers(DiL00UU)
	r1206: DiL10UU() -> Di10UU() + L() ku #Modifiers(DiL10UU)
	r1207: DiL10CU() -> Di10CU() + L() ku #Modifiers(DiL10CU)
	r1208: DiL10LU() -> Di10LU() + L() ku #Modifiers(DiL10LU)
	r1209: DiL01UU() -> Di01UU() + L() ku #Modifiers(DiL01UU)
	r1210: DiL01UG() -> Di01UG() + L() ku #Modifiers(DiL01UG)
	r1211: DiL01UL() -> Di01UL() + L() ku #Modifiers(DiL01UL)
	r1212: DiL11UU() -> Di11UU() + L() ku #Modifiers(DiL11UU)
	r1213: DiL11CU() -> Di11CU() + L() ku #Modifiers(DiL11CU)
	r1214: DiL11LU() -> Di11LU() + L() ku #Modifiers(DiL11LU)
	r1215: DiL11UG() -> Di11UG() + L() ku #Modifiers(DiL11UG)
	r1216: DiL11UL() -> Di11UL() + L() ku #Modifiers(DiL11UL)
	r1217: DiL11CG() -> Di11CG() + L() ku #Modifiers(DiL11CG)
	r1218: DiL11CC() -> Di11CC() + L() ku #Modifiers(DiL11CC)
	r1219: DiL11LG() -> Di11LG() + L() ku #Modifiers(DiL11LG)
	r1220: DiL02UU() -> Di02UU() + L() ku #Modifiers(DiL02UU)
	r1221: DiL02UG() -> Di02UG() + L() ku #Modifiers(DiL02UG)
	r1222: DiL02UL() -> Di02UL() + L() ku #Modifiers(DiL02UL)
	r1223: DiL12UU() -> Di12UU() + L() ku #Modifiers(DiL12UU)
	r1224: DiL12CU() -> Di12CU() + L() ku #Modifiers(DiL12CU)
	r1225: DiL12LU() -> Di12LU() + L() ku #Modifiers(DiL12LU)
	r1226: DiL12UG() -> Di12UG() + L() ku #Modifiers(DiL12UG)
	r1227: DiL12UL() -> Di12UL() + L() ku #Modifiers(DiL12UL)
	r1228: DiL12CG() -> Di12CG() + L() ku #Modifiers(DiL12CG)
	r1229: DiL12CC() -> Di12CC() + L() ku #Modifiers(DiL12CC)
	r1230: DiL12LG() -> Di12LG() + L() ku #Modifiers(DiL12LG)
	r1231: R00UU() -> Di00UU() fRate1230() #Modifiers(SumM, R00UU, SumM)
	r1232: R10UU() -> Di10UU() fRate1231() #Modifiers(SumM, R10UU, SumM)
	r1233: R10CU() -> Di10CU() fRate1232() #Modifiers(SumM, R10CU, SumM)
	r1234: R10LU() -> Di10LU() fRate1233() #Modifiers(SumM, R10LU, SumM)
	r1235: R01UU() -> Di01UU() fRate1234() #Modifiers(SumM, R01UU, SumM)
	r1236: R01UG() -> Di01UG() fRate1235() #Modifiers(SumM, R01UG, SumM)
	r1237: R01UL() -> Di01UL() fRate1236() #Modifiers(SumM, R01UL, SumM)
	r1238: R11UU() -> Di11UU() fRate1237() #Modifiers(SumM, R11UU, SumM)
	r1239: R11CU() -> Di11CU() fRate1238() #Modifiers(SumM, R11CU, SumM)
	r1240: R11LU() -> Di11LU() fRate1239() #Modifiers(SumM, R11LU, SumM)
	r1241: R11UG() -> Di11UG() fRate1240() #Modifiers(SumM, R11UG, SumM)
	r1242: R11UL() -> Di11UL() fRate1241() #Modifiers(SumM, R11UL, SumM)
	r1243: R11CG() -> Di11CG() fRate1242() #Modifiers(SumM, R11CG, SumM)
	r1244: R11CC() -> Di11CC() fRate1243() #Modifiers(SumM, R11CC, SumM)
	r1245: R11LG() -> Di11LG() fRate1244() #Modifiers(SumM, R11LG, SumM)
	r1246: R02UU() -> Di02UU() fRate1245() #Modifiers(SumM, R02UU, SumM)
	r1247: R02UG() -> Di02UG() fRate1246() #Modifiers(SumM, R02UG, SumM)
	r1248: R02UL() -> Di02UL() fRate1247() #Modifiers(SumM, R02UL, SumM)
	r1249: R12UU() -> Di12UU() fRate1248() #Modifiers(SumM, R12UU, SumM)
	r1250: R12CU() -> Di12CU() fRate1249() #Modifiers(SumM, R12CU, SumM)
	r1251: R12LU() -> Di12LU() fRate1250() #Modifiers(SumM, R12LU, SumM)
	r1252: R12UG() -> Di12UG() fRate1251() #Modifiers(SumM, R12UG, SumM)
	r1253: R12UL() -> Di12UL() fRate1252() #Modifiers(SumM, R12UL, SumM)
	r1254: R12CG() -> Di12CG() fRate1253() #Modifiers(SumM, R12CG, SumM)
	r1255: R12CC() -> Di12CC() fRate1254() #Modifiers(SumM, R12CC, SumM)
	r1256: R12LG() -> Di12LG() fRate1255() #Modifiers(SumM, R12LG, SumM)
	r1257: R00UU() -> Da00UU() fRate1256() #Modifiers(SumML, R00UU, SumML)
	r1258: R10UU() -> Da10UU() fRate1257() #Modifiers(SumML, R10UU, SumML)
	r1259: R10CU() -> Da10CU() fRate1258() #Modifiers(SumML, R10CU, SumML)
	r1260: R10LU() -> Da10LU() fRate1259() #Modifiers(SumML, R10LU, SumML)
	r1261: R01UU() -> Da01UU() fRate1260() #Modifiers(SumML, R01UU, SumML)
	r1262: R01UG() -> Da01UG() fRate1261() #Modifiers(SumML, R01UG, SumML)
	r1263: R01UL() -> Da01UL() fRate1262() #Modifiers(SumML, R01UL, SumML)
	r1264: R11UU() -> Da11UU() fRate1263() #Modifiers(SumML, R11UU, SumML)
	r1265: R11CU() -> Da11CU() fRate1264() #Modifiers(SumML, R11CU, SumML)
	r1266: R11LU() -> Da11LU() fRate1265() #Modifiers(SumML, R11LU, SumML)
	r1267: R11UG() -> Da11UG() fRate1266() #Modifiers(SumML, R11UG, SumML)
	r1268: R11UL() -> Da11UL() fRate1267() #Modifiers(SumML, R11UL, SumML)
	r1269: R11CG() -> Da11CG() fRate1268() #Modifiers(SumML, R11CG, SumML)
	r1270: R11CC() -> Da11CC() fRate1269() #Modifiers(SumML, R11CC, SumML)
	r1271: R11LG() -> Da11LG() fRate1270() #Modifiers(SumML, R11LG, SumML)
	r1272: R02UU() -> Da02UU() fRate1271() #Modifiers(SumML, R02UU, SumML)
	r1273: R02UG() -> Da02UG() fRate1272() #Modifiers(SumML, R02UG, SumML)
	r1274: R02UL() -> Da02UL() fRate1273() #Modifiers(SumML, R02UL, SumML)
	r1275: R12UU() -> Da12UU() fRate1274() #Modifiers(SumML, R12UU, SumML)
	r1276: R12CU() -> Da12CU() fRate1275() #Modifiers(SumML, R12CU, SumML)
	r1277: R12LU() -> Da12LU() fRate1276() #Modifiers(SumML, R12LU, SumML)
	r1278: R12UG() -> Da12UG() fRate1277() #Modifiers(SumML, R12UG, SumML)
	r1279: R12UL() -> Da12UL() fRate1278() #Modifiers(SumML, R12UL, SumML)
	r1280: R12CG() -> Da12CG() fRate1279() #Modifiers(SumML, R12CG, SumML)
	r1281: R12CC() -> Da12CC() fRate1280() #Modifiers(SumML, R12CC, SumML)
	r1282: R12LG() -> Da12LG() fRate1281() #Modifiers(SumML, R12LG, SumML)
	r1283: RL00UU() -> DiL00UU() fRate1282() #Modifiers(SumM, RL00UU, SumM)
	r1284: RL10UU() -> DiL10UU() fRate1283() #Modifiers(SumM, RL10UU, SumM)
	r1285: RL10CU() -> DiL10CU() fRate1284() #Modifiers(SumM, RL10CU, SumM)
	r1286: RL10LU() -> DiL10LU() fRate1285() #Modifiers(SumM, RL10LU, SumM)
	r1287: RL01UU() -> DiL01UU() fRate1286() #Modifiers(SumM, RL01UU, SumM)
	r1288: RL01UG() -> DiL01UG() fRate1287() #Modifiers(SumM, RL01UG, SumM)
	r1289: RL01UL() -> DiL01UL() fRate1288() #Modifiers(SumM, RL01UL, SumM)
	r1290: RL11UU() -> DiL11UU() fRate1289() #Modifiers(SumM, RL11UU, SumM)
	r1291: RL11CU() -> DiL11CU() fRate1290() #Modifiers(SumM, RL11CU, SumM)
	r1292: RL11LU() -> DiL11LU() fRate1291() #Modifiers(SumM, RL11LU, SumM)
	r1293: RL11UG() -> DiL11UG() fRate1292() #Modifiers(SumM, RL11UG, SumM)
	r1294: RL11UL() -> DiL11UL() fRate1293() #Modifiers(SumM, RL11UL, SumM)
	r1295: RL11CG() -> DiL11CG() fRate1294() #Modifiers(SumM, RL11CG, SumM)
	r1296: RL11CC() -> DiL11CC() fRate1295() #Modifiers(SumM, RL11CC, SumM)
	r1297: RL11LG() -> DiL11LG() fRate1296() #Modifiers(SumM, RL11LG, SumM)
	r1298: RL02UU() -> DiL02UU() fRate1297() #Modifiers(SumM, RL02UU, SumM)
	r1299: RL02UG() -> DiL02UG() fRate1298() #Modifiers(SumM, RL02UG, SumM)
	r1300: RL02UL() -> DiL02UL() fRate1299() #Modifiers(SumM, RL02UL, SumM)
	r1301: RL12UU() -> DiL12UU() fRate1300() #Modifiers(SumM, RL12UU, SumM)
	r1302: RL12CU() -> DiL12CU() fRate1301() #Modifiers(SumM, RL12CU, SumM)
	r1303: RL12LU() -> DiL12LU() fRate1302() #Modifiers(SumM, RL12LU, SumM)
	r1304: RL12UG() -> DiL12UG() fRate1303() #Modifiers(SumM, RL12UG, SumM)
	r1305: RL12UL() -> DiL12UL() fRate1304() #Modifiers(SumM, RL12UL, SumM)
	r1306: RL12CG() -> DiL12CG() fRate1305() #Modifiers(SumM, RL12CG, SumM)
	r1307: RL12CC() -> DiL12CC() fRate1306() #Modifiers(SumM, RL12CC, SumM)
	r1308: RL12LG() -> DiL12LG() fRate1307() #Modifiers(SumM, RL12LG, SumM)
	r1309: RL00UU() -> DaL00UU() fRate1308() #Modifiers(SumML, RL00UU, SumML)
	r1310: RL10UU() -> DaL10UU() fRate1309() #Modifiers(SumML, RL10UU, SumML)
	r1311: RL10CU() -> DaL10CU() fRate1310() #Modifiers(SumML, RL10CU, SumML)
	r1312: RL10LU() -> DaL10LU() fRate1311() #Modifiers(SumML, RL10LU, SumML)
	r1313: RL01UU() -> DaL01UU() fRate1312() #Modifiers(SumML, RL01UU, SumML)
	r1314: RL01UG() -> DaL01UG() fRate1313() #Modifiers(SumML, RL01UG, SumML)
	r1315: RL01UL() -> DaL01UL() fRate1314() #Modifiers(SumML, RL01UL, SumML)
	r1316: RL11UU() -> DaL11UU() fRate1315() #Modifiers(SumML, RL11UU, SumML)
	r1317: RL11CU() -> DaL11CU() fRate1316() #Modifiers(SumML, RL11CU, SumML)
	r1318: RL11LU() -> DaL11LU() fRate1317() #Modifiers(SumML, RL11LU, SumML)
	r1319: RL11UG() -> DaL11UG() fRate1318() #Modifiers(SumML, RL11UG, SumML)
	r1320: RL11UL() -> DaL11UL() fRate1319() #Modifiers(SumML, RL11UL, SumML)
	r1321: RL11CG() -> DaL11CG() fRate1320() #Modifiers(SumML, RL11CG, SumML)
	r1322: RL11CC() -> DaL11CC() fRate1321() #Modifiers(SumML, RL11CC, SumML)
	r1323: RL11LG() -> DaL11LG() fRate1322() #Modifiers(SumML, RL11LG, SumML)
	r1324: RL02UU() -> DaL02UU() fRate1323() #Modifiers(SumML, RL02UU, SumML)
	r1325: RL02UG() -> DaL02UG() fRate1324() #Modifiers(SumML, RL02UG, SumML)
	r1326: RL02UL() -> DaL02UL() fRate1325() #Modifiers(SumML, RL02UL, SumML)
	r1327: RL12UU() -> DaL12UU() fRate1326() #Modifiers(SumML, RL12UU, SumML)
	r1328: RL12CU() -> DaL12CU() fRate1327() #Modifiers(SumML, RL12CU, SumML)
	r1329: RL12LU() -> DaL12LU() fRate1328() #Modifiers(SumML, RL12LU, SumML)
	r1330: RL12UG() -> DaL12UG() fRate1329() #Modifiers(SumML, RL12UG, SumML)
	r1331: RL12UL() -> DaL12UL() fRate1330() #Modifiers(SumML, RL12UL, SumML)
	r1332: RL12CG() -> DaL12CG() fRate1331() #Modifiers(SumML, RL12CG, SumML)
	r1333: RL12CC() -> DaL12CC() fRate1332() #Modifiers(SumML, RL12CC, SumML)
	r1334: RL12LG() -> DaL12LG() fRate1333() #Modifiers(SumML, RL12LG, SumML)
	r1335: Di00UU() -> R00UU() kuDIM #Modifiers(Di00UU)
	r1336: Di10UU() -> R10UU() kuDIM #Modifiers(Di10UU)
	r1337: Di10CU() -> R10CU() kuDIM #Modifiers(Di10CU)
	r1338: Di10LU() -> R10LU() kuDIM #Modifiers(Di10LU)
	r1339: Di01UU() -> R01UU() kuDIM #Modifiers(Di01UU)
	r1340: Di01UG() -> R01UG() kuDIM #Modifiers(Di01UG)
	r1341: Di01UL() -> R01UL() kuDIM #Modifiers(Di01UL)
	r1342: Di11UU() -> R11UU() kuDIM #Modifiers(Di11UU)
	r1343: Di11CU() -> R11CU() kuDIM #Modifiers(Di11CU)
	r1344: Di11LU() -> R11LU() kuDIM #Modifiers(Di11LU)
	r1345: Di11UG() -> R11UG() kuDIM #Modifiers(Di11UG)
	r1346: Di11UL() -> R11UL() kuDIM #Modifiers(Di11UL)
	r1347: Di11CG() -> R11CG() kuDIM #Modifiers(Di11CG)
	r1348: Di11CC() -> R11CC() kuDIM #Modifiers(Di11CC)
	r1349: Di11LG() -> R11LG() kuDIM #Modifiers(Di11LG)
	r1350: Di02UU() -> R02UU() kuDIM #Modifiers(Di02UU)
	r1351: Di02UG() -> R02UG() kuDIM #Modifiers(Di02UG)
	r1352: Di02UL() -> R02UL() kuDIM #Modifiers(Di02UL)
	r1353: Di12UU() -> R12UU() kuDIM #Modifiers(Di12UU)
	r1354: Di12CU() -> R12CU() kuDIM #Modifiers(Di12CU)
	r1355: Di12LU() -> R12LU() kuDIM #Modifiers(Di12LU)
	r1356: Di12UG() -> R12UG() kuDIM #Modifiers(Di12UG)
	r1357: Di12UL() -> R12UL() kuDIM #Modifiers(Di12UL)
	r1358: Di12CG() -> R12CG() kuDIM #Modifiers(Di12CG)
	r1359: Di12CC() -> R12CC() kuDIM #Modifiers(Di12CC)
	r1360: Di12LG() -> R12LG() kuDIM #Modifiers(Di12LG)
	r1361: DiL00UU() -> RL00UU() kuDIM #Modifiers(DiL00UU)
	r1362: DiL10UU() -> RL10UU() kuDIM #Modifiers(DiL10UU)
	r1363: DiL10CU() -> RL10CU() kuDIM #Modifiers(DiL10CU)
	r1364: DiL10LU() -> RL10LU() kuDIM #Modifiers(DiL10LU)
	r1365: DiL01UU() -> RL01UU() kuDIM #Modifiers(DiL01UU)
	r1366: DiL01UG() -> RL01UG() kuDIM #Modifiers(DiL01UG)
	r1367: DiL01UL() -> RL01UL() kuDIM #Modifiers(DiL01UL)
	r1368: DiL11UU() -> RL11UU() kuDIM #Modifiers(DiL11UU)
	r1369: DiL11CU() -> RL11CU() kuDIM #Modifiers(DiL11CU)
	r1370: DiL11LU() -> RL11LU() kuDIM #Modifiers(DiL11LU)
	r1371: DiL11UG() -> RL11UG() kuDIM #Modifiers(DiL11UG)
	r1372: DiL11UL() -> RL11UL() kuDIM #Modifiers(DiL11UL)
	r1373: DiL11CG() -> RL11CG() kuDIM #Modifiers(DiL11CG)
	r1374: DiL11CC() -> RL11CC() kuDIM #Modifiers(DiL11CC)
	r1375: DiL11LG() -> RL11LG() kuDIM #Modifiers(DiL11LG)
	r1376: DiL02UU() -> RL02UU() kuDIM #Modifiers(DiL02UU)
	r1377: DiL02UG() -> RL02UG() kuDIM #Modifiers(DiL02UG)
	r1378: DiL02UL() -> RL02UL() kuDIM #Modifiers(DiL02UL)
	r1379: DiL12UU() -> RL12UU() kuDIM #Modifiers(DiL12UU)
	r1380: DiL12CU() -> RL12CU() kuDIM #Modifiers(DiL12CU)
	r1381: DiL12LU() -> RL12LU() kuDIM #Modifiers(DiL12LU)
	r1382: DiL12UG() -> RL12UG() kuDIM #Modifiers(DiL12UG)
	r1383: DiL12UL() -> RL12UL() kuDIM #Modifiers(DiL12UL)
	r1384: DiL12CG() -> RL12CG() kuDIM #Modifiers(DiL12CG)
	r1385: DiL12CC() -> RL12CC() kuDIM #Modifiers(DiL12CC)
	r1386: DiL12LG() -> RL12LG() kuDIM #Modifiers(DiL12LG)
	r1387: Da00UU() -> R00UU() kuDIM #Modifiers(Da00UU)
	r1388: Da10UU() -> R10UU() kuDIM #Modifiers(Da10UU)
	r1389: Da10CU() -> R10CU() kuDIM #Modifiers(Da10CU)
	r1390: Da10LU() -> R10LU() kuDIM #Modifiers(Da10LU)
	r1391: Da01UU() -> R01UU() kuDIM #Modifiers(Da01UU)
	r1392: Da01UG() -> R01UG() kuDIM #Modifiers(Da01UG)
	r1393: Da01UL() -> R01UL() kuDIM #Modifiers(Da01UL)
	r1394: Da11UU() -> R11UU() kuDIM #Modifiers(Da11UU)
	r1395: Da11CU() -> R11CU() kuDIM #Modifiers(Da11CU)
	r1396: Da11LU() -> R11LU() kuDIM #Modifiers(Da11LU)
	r1397: Da11UG() -> R11UG() kuDIM #Modifiers(Da11UG)
	r1398: Da11UL() -> R11UL() kuDIM #Modifiers(Da11UL)
	r1399: Da11CG() -> R11CG() kuDIM #Modifiers(Da11CG)
	r1400: Da11CC() -> R11CC() kuDIM #Modifiers(Da11CC)
	r1401: Da11LG() -> R11LG() kuDIM #Modifiers(Da11LG)
	r1402: Da02UU() -> R02UU() kuDIM #Modifiers(Da02UU)
	r1403: Da02UG() -> R02UG() kuDIM #Modifiers(Da02UG)
	r1404: Da02UL() -> R02UL() kuDIM #Modifiers(Da02UL)
	r1405: Da12UU() -> R12UU() kuDIM #Modifiers(Da12UU)
	r1406: Da12CU() -> R12CU() kuDIM #Modifiers(Da12CU)
	r1407: Da12LU() -> R12LU() kuDIM #Modifiers(Da12LU)
	r1408: Da12UG() -> R12UG() kuDIM #Modifiers(Da12UG)
	r1409: Da12UL() -> R12UL() kuDIM #Modifiers(Da12UL)
	r1410: Da12CG() -> R12CG() kuDIM #Modifiers(Da12CG)
	r1411: Da12CC() -> R12CC() kuDIM #Modifiers(Da12CC)
	r1412: Da12LG() -> R12LG() kuDIM #Modifiers(Da12LG)
	r1413: DaL00UU() -> RL00UU() kuDIM #Modifiers(DaL00UU)
	r1414: DaL10UU() -> RL10UU() kuDIM #Modifiers(DaL10UU)
	r1415: DaL10CU() -> RL10CU() kuDIM #Modifiers(DaL10CU)
	r1416: DaL10LU() -> RL10LU() kuDIM #Modifiers(DaL10LU)
	r1417: DaL01UU() -> RL01UU() kuDIM #Modifiers(DaL01UU)
	r1418: DaL01UG() -> RL01UG() kuDIM #Modifiers(DaL01UG)
	r1419: DaL01UL() -> RL01UL() kuDIM #Modifiers(DaL01UL)
	r1420: DaL11UU() -> RL11UU() kuDIM #Modifiers(DaL11UU)
	r1421: DaL11CU() -> RL11CU() kuDIM #Modifiers(DaL11CU)
	r1422: DaL11LU() -> RL11LU() kuDIM #Modifiers(DaL11LU)
	r1423: DaL11UG() -> RL11UG() kuDIM #Modifiers(DaL11UG)
	r1424: DaL11UL() -> RL11UL() kuDIM #Modifiers(DaL11UL)
	r1425: DaL11CG() -> RL11CG() kuDIM #Modifiers(DaL11CG)
	r1426: DaL11CC() -> RL11CC() kuDIM #Modifiers(DaL11CC)
	r1427: DaL11LG() -> RL11LG() kuDIM #Modifiers(DaL11LG)
	r1428: DaL02UU() -> RL02UU() kuDIM #Modifiers(DaL02UU)
	r1429: DaL02UG() -> RL02UG() kuDIM #Modifiers(DaL02UG)
	r1430: DaL02UL() -> RL02UL() kuDIM #Modifiers(DaL02UL)
	r1431: DaL12UU() -> RL12UU() kuDIM #Modifiers(DaL12UU)
	r1432: DaL12CU() -> RL12CU() kuDIM #Modifiers(DaL12CU)
	r1433: DaL12LU() -> RL12LU() kuDIM #Modifiers(DaL12LU)
	r1434: DaL12UG() -> RL12UG() kuDIM #Modifiers(DaL12UG)
	r1435: DaL12UL() -> RL12UL() kuDIM #Modifiers(DaL12UL)
	r1436: DaL12CG() -> RL12CG() kuDIM #Modifiers(DaL12CG)
	r1437: DaL12CC() -> RL12CC() kuDIM #Modifiers(DaL12CC)
	r1438: DaL12LG() -> RL12LG() kuDIM #Modifiers(DaL12LG)
	r1439: R00UU() -> Di00UU() fRate1438() #Modifiers(R00UU)
	r1440: R10UU() -> Di10UU() fRate1439() #Modifiers(R10UU)
	r1441: R10CU() -> Di10CU() fRate1440() #Modifiers(R10CU)
	r1442: R10LU() -> Di10LU() fRate1441() #Modifiers(R10LU)
	r1443: R01UU() -> Di01UU() fRate1442() #Modifiers(R01UU)
	r1444: R01UG() -> Di01UG() fRate1443() #Modifiers(R01UG)
	r1445: R01UL() -> Di01UL() fRate1444() #Modifiers(R01UL)
	r1446: R11UU() -> Di11UU() fRate1445() #Modifiers(R11UU)
	r1447: R11CU() -> Di11CU() fRate1446() #Modifiers(R11CU)
	r1448: R11LU() -> Di11LU() fRate1447() #Modifiers(R11LU)
	r1449: R11UG() -> Di11UG() fRate1448() #Modifiers(R11UG)
	r1450: R11UL() -> Di11UL() fRate1449() #Modifiers(R11UL)
	r1451: R11CG() -> Di11CG() fRate1450() #Modifiers(R11CG)
	r1452: R11CC() -> Di11CC() fRate1451() #Modifiers(R11CC)
	r1453: R11LG() -> Di11LG() fRate1452() #Modifiers(R11LG)
	r1454: R02UU() -> Di02UU() fRate1453() #Modifiers(R02UU)
	r1455: R02UG() -> Di02UG() fRate1454() #Modifiers(R02UG)
	r1456: R02UL() -> Di02UL() fRate1455() #Modifiers(R02UL)
	r1457: R12UU() -> Di12UU() fRate1456() #Modifiers(R12UU)
	r1458: R12CU() -> Di12CU() fRate1457() #Modifiers(R12CU)
	r1459: R12LU() -> Di12LU() fRate1458() #Modifiers(R12LU)
	r1460: R12UG() -> Di12UG() fRate1459() #Modifiers(R12UG)
	r1461: R12UL() -> Di12UL() fRate1460() #Modifiers(R12UL)
	r1462: R12CG() -> Di12CG() fRate1461() #Modifiers(R12CG)
	r1463: R12CC() -> Di12CC() fRate1462() #Modifiers(R12CC)
	r1464: R12LG() -> Di12LG() fRate1463() #Modifiers(R12LG)
	r1465: RL00UU() -> DaL00UU() fRate1464() #Modifiers(RL00UU)
	r1466: RL10UU() -> DaL10UU() fRate1465() #Modifiers(RL10UU)
	r1467: RL10CU() -> DaL10CU() fRate1466() #Modifiers(RL10CU)
	r1468: RL10LU() -> DaL10LU() fRate1467() #Modifiers(RL10LU)
	r1469: RL01UU() -> DaL01UU() fRate1468() #Modifiers(RL01UU)
	r1470: RL01UG() -> DaL01UG() fRate1469() #Modifiers(RL01UG)
	r1471: RL01UL() -> DaL01UL() fRate1470() #Modifiers(RL01UL)
	r1472: RL11UU() -> DaL11UU() fRate1471() #Modifiers(RL11UU)
	r1473: RL11CU() -> DaL11CU() fRate1472() #Modifiers(RL11CU)
	r1474: RL11LU() -> DaL11LU() fRate1473() #Modifiers(RL11LU)
	r1475: RL11UG() -> DaL11UG() fRate1474() #Modifiers(RL11UG)
	r1476: RL11UL() -> DaL11UL() fRate1475() #Modifiers(RL11UL)
	r1477: RL11CG() -> DaL11CG() fRate1476() #Modifiers(RL11CG)
	r1478: RL11CC() -> DaL11CC() fRate1477() #Modifiers(RL11CC)
	r1479: RL11LG() -> DaL11LG() fRate1478() #Modifiers(RL11LG)
	r1480: RL02UU() -> DaL02UU() fRate1479() #Modifiers(RL02UU)
	r1481: RL02UG() -> DaL02UG() fRate1480() #Modifiers(RL02UG)
	r1482: RL02UL() -> DaL02UL() fRate1481() #Modifiers(RL02UL)
	r1483: RL12UU() -> DaL12UU() fRate1482() #Modifiers(RL12UU)
	r1484: RL12CU() -> DaL12CU() fRate1483() #Modifiers(RL12CU)
	r1485: RL12LU() -> DaL12LU() fRate1484() #Modifiers(RL12LU)
	r1486: RL12UG() -> DaL12UG() fRate1485() #Modifiers(RL12UG)
	r1487: RL12UL() -> DaL12UL() fRate1486() #Modifiers(RL12UL)
	r1488: RL12CG() -> DaL12CG() fRate1487() #Modifiers(RL12CG)
	r1489: RL12CC() -> DaL12CC() fRate1488() #Modifiers(RL12CC)
	r1490: RL12LG() -> DaL12LG() fRate1489() #Modifiers(RL12LG)
end reaction rules
end model
