###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000599', 'http://identifiers.org/biomodels.db/MODEL1408060000']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/24896823']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0038160', 'http://identifiers.org/go/GO:0038146']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@creatorEmail:'juty@ebi.ac.uk'
#@creatorName:'Juty Nick'
#@notes:'This is a plain translation of an SBML model created on 13/08/2021. The original model has 30 molecules and 37 reactions. The translated model has 30 molecules and 37 rules'
###
begin model
begin parameters
	parameter_1 0.0021
	parameter_2 0.0014
	parameter_3 8.5e-09
	parameter_4 1.4e-08
	parameter_5 40.0
	parameter_6 0.84
	parameter_9 5100000.0
	parameter_10 650000.0
	parameter_11 0.0023
	parameter_12 0.0039
	parameter_13 0.00055
	parameter_14 0.00074
	parameter_15 0.0025
	parameter_16 6.9e-05
	parameter_17 0.0011
	parameter_18 0.00028
	parameter_19 0.0001
	parameter_20 0.0001
	parameter_21 7800000.0
	parameter_22 2300000.0
	parameter_23 0.0047
	parameter_24 0.0021
	parameter_25 40000.0
	parameter_26 40000.0
	parameter_27 40000.0
	parameter_28 6.02e+23
	parameter_29 7e-05
	parameter_30 8.4e-12
	parameter_7 1000000000.0
	Metabolite_1 (328437.241399281)
	Metabolite_3 (492655.862098776)
	Metabolite_5 (0.0)
	Metabolite_15 (0.0)
	Metabolite_27 (133539.963932179)
	Metabolite_37 (509483.771339917)
end parameters
begin molecule types
	R4Be()
	R4Bpi()
	C4Bpii()
	C7Beii()
	C4()
	C4Be()
	Be()
	C7Bpii()
	C4Bp()
	C7Be()
	R7Bpi()
	R7Bpii()
	Bp()
	C4Bei()
	R7Be()
	R7()
	R4Bp()
	C7Bp()
	R7Beii()
	R4()
	L12()
	C4Beii()
	L12i()
	R7Bei()
	C7Bei()
	R4Bei()
	R7Bp()
	C4Bpi()
	C7()
	C7Bpi()
end molecule types
begin seed species
	Be() 1.9778490677064703e+29 # 328437.241399281mol/L * 6.022e23/mol *1.0L #Be #species_2
	Bp() 2.966773601558829e+29 #original 492655.862098776substance/volume #Bp #species_3
	R4() 8.04177662799582e+28 #original 133539.963932179substance/volume #R4 #species_15
	R4Be() 3.272647364227284e+27 #original 5434.48582568463substance/volume #R4Be #species_16
	R7Bpii() 2.0782965494167556e+29 #original 345117.328033337substance/volume #R7Bpii #species_18
	R7Bp() 5.8618620624037475e+28 #original 97340.7848290227substance/volume #R7Bp #species_19
	R7() 3.0681112710089803e+29 #original 509483.771339917substance/volume #R7 #species_20
	R4Bpi() 1.636323691856663e+29 #original 271724.292902136substance/volume #R4Bpi #species_23
	R4Bp() 4.908971046339484e+27 #original 8151.72873852455substance/volume #R4Bp #species_24
	R7Be() 3.9079080416036543e+28 #original 64893.856552701substance/volume #R7Be #species_25
	R7Bei() 6.096336544915518e+28 #original 101234.416222443substance/volume #R7Bei #species_26
	R7Beii() 1.3855310329449172e+29 #original 230078.21868896substance/volume #R7Beii #species_27
	R4Bei() 1.0908824612380945e+29 #original 181149.528601477substance/volume #R4Bei #species_29
	R7Bpi() 9.144504817370598e+28 #original 151851.62433362substance/volume #R7Bpi #species_30
	L12() 6.98552e+31 #original 116000000.0substance/volume #L12 #species_1
end seed species
begin observables
	Species Be Be() #Be
	Species Bp Bp() #Bp
	Species C4 C4() #C4
	Species C4Be C4Be() #C4Be
	Species C4Beii C4Beii() #C4Beii
	Species C4Bp C4Bp() #C4Bp
	Species C4Bpi C4Bpi() #C4Bpi
	Species C7 C7() #C7
	Species C7Bei C7Bei() #C7Bei
	Species C7Beii C7Beii() #C7Beii
	Species C7Bp C7Bp() #C7Bp
	Species C7Bpi C7Bpi() #C7Bpi
	Species L12i L12i() #L12i
	Species R4 R4() #R4
	Species R4Be R4Be() #R4Be
	Species C7Bpii C7Bpii() #C7Bpii
	Species R7Bpii R7Bpii() #R7Bpii
	Species R7Bp R7Bp() #R7Bp
	Species R7 R7() #R7
	Species C4Bpii C4Bpii() #C4Bpii
	Species C4Bei C4Bei() #C4Bei
	Species R4Bpi R4Bpi() #R4Bpi
	Species R4Bp R4Bp() #R4Bp
	Species R7Be R7Be() #R7Be
	Species R7Bei R7Bei() #R7Bei
	Species R7Beii R7Beii() #R7Beii
	Species C7Be C7Be() #C7Be
	Species R4Bei R4Bei() #R4Bei
	Species R7Bpi R7Bpi() #R7Bpi
	Species L12 L12() #L12
end observables
begin functions
	_CXCR7() = (100*C7 + 100*R7)/(Metabolite_15 + Metabolite_37)
	_CXCR4() = (100*C4 + 100*R4)/(Metabolite_27 + Metabolite_5)
	_Beta() = (100*Be + 100*Bp)/(Metabolite_1 + Metabolite_3)
	Total7() = C7Bp + C7Bpi + C7Bpii + R7Bp + R7Bpi
	Total4() = C4Bp + C4Bpi + R4Bp
	fRate0m() = parameter_21*parameter_3
	fRate1m() = parameter_21*parameter_3
	fRate2m() = parameter_3*parameter_9
	fRate3m() = parameter_3*parameter_9
	fRate4m() = parameter_22*parameter_4
	fRate5m() = parameter_22*parameter_4
	fRate6m() = parameter_10*parameter_4
	fRate7m() = parameter_10*parameter_4
	fRate31() = parameter_1*parameter_7/(parameter_28*parameter_30)
	fRate31m() = parameter_1*parameter_5
	fRate32() = parameter_2*parameter_7/(parameter_28*parameter_30)
	fRate32m() = parameter_2*parameter_6
	fRate33() = parameter_1*parameter_7/(parameter_28*parameter_30)
	fRate33m() = parameter_1*parameter_5*parameter_9/parameter_21
	fRate34() = parameter_1*parameter_7/(parameter_28*parameter_30)
	fRate34m() = parameter_1*parameter_5*parameter_9/parameter_21
	fRate35() = parameter_2*parameter_7/(parameter_28*parameter_30)
	fRate35m() = parameter_10*parameter_2*parameter_6/parameter_22
	fRate36() = parameter_2*parameter_7/(parameter_28*parameter_30)
	fRate36m() = parameter_10*parameter_2*parameter_6/parameter_22
end functions
begin reaction rules
	reaction_7: Be() + R4() <-> R4Be() parameter_3,fRate0m() #Modifiers(species_15, species_16, species_2)
	reaction_8: Bp() + R4() <-> R4Bp() parameter_3,fRate1m() #Modifiers(species_15, species_24, species_3)
	reaction_9: Be() + C4() <-> C4Be() parameter_3,fRate2m() #Modifiers(species_2, species_4, species_5)
	reaction_10: Bp() + C4() <-> C4Bp() parameter_3,fRate3m() #Modifiers(species_3, species_4, species_7)
	reaction_11: Be() + R7() <-> R7Be() parameter_4,fRate4m() #Modifiers(species_2, species_20, species_25)
	reaction_12: Bp() + R7() <-> R7Bp() parameter_4,fRate5m() #Modifiers(species_19, species_20, species_3)
	reaction_13: Be() + C7() <-> C7Be() parameter_4,fRate6m() #Modifiers(species_2, species_28, species_9)
	reaction_14: Bp() + C7() <-> C7Bp() parameter_4,fRate7m() #Modifiers(species_12, species_3, species_9)
	reaction_15: R4Be() -> R4Bei() + Be() parameter_11 #Modifiers(species_16)
	reaction_16: R4Bp() -> R4Bpi() + Bp() parameter_11 #Modifiers(species_24)
	reaction_17: C4Be() -> C4Bei() + L12i() parameter_23 #Modifiers(species_5)
	reaction_18: C4Bp() -> C4Bpi() + L12i() parameter_23 #Modifiers(species_7)
	reaction_19: R7Be() -> R7Bei() parameter_12 #Modifiers(species_25)
	reaction_20: R7Bp() -> R7Bpi() parameter_12 #Modifiers(species_19)
	reaction_21: C7Be() -> C7Bei() + L12i() parameter_24 #Modifiers(species_28)
	reaction_22: C7Bp() -> C7Bpi() + L12i() parameter_24 #Modifiers(species_12)
	reaction_23: C4Bei() -> C4Beii() + Be() parameter_14 #Modifiers(species_22)
	reaction_24: C4Bpi() -> C4Bpii() + Bp() parameter_14 #Modifiers(species_8)
	reaction_25: R7Bei() -> R7Beii() + Be() parameter_15 #Modifiers(species_26)
	reaction_26: R7Bpi() -> R7Bpii() + Bp() parameter_15 #Modifiers(species_30)
	reaction_27: C7Bei() -> C7Beii() parameter_13 #Modifiers(species_10)
	reaction_28: C7Bpi() -> C7Bpii() parameter_13 #Modifiers(species_13)
	reaction_29: R4Bei() -> R4() parameter_16 #Modifiers(species_29)
	reaction_30: R4Bpi() -> R4() parameter_16 #Modifiers(species_23)
	reaction_31: R7Beii() -> R7() parameter_17 #Modifiers(species_27)
	reaction_32: R7Bpii() -> R7() parameter_17 #Modifiers(species_18)
	reaction_33: C7Beii() -> R7() + Be() parameter_18 #Modifiers(species_11)
	reaction_34: C7Bpii() -> R7() + Bp() parameter_18 #Modifiers(species_17)
	reaction_35: C4Beii() -> 0  parameter_19 #Modifiers(species_6)
	reaction_36: C4Bpii() -> 0  parameter_19 #Modifiers(species_21)
	reaction_37: L12i() -> 0  parameter_20 #Modifiers(species_14)
	reaction_1: L12() + R4() <-> C4() fRate31(),fRate31m() #Modifiers(species_1, species_15, species_4)
	reaction_2: L12() + R7() <-> C7() fRate32(),fRate32m() #Modifiers(species_1, species_20, species_9)
	reaction_3: L12() + R4Be() <-> C4Be() fRate33(),fRate33m() #Modifiers(species_1, species_16, species_5)
	reaction_4: L12() + R4Bp() <-> C4Bp() fRate34(),fRate34m() #Modifiers(species_1, species_24, species_7)
	reaction_5: L12() + R7Be() <-> C7Be() fRate35(),fRate35m() #Modifiers(species_1, species_25, species_28)
	reaction_6: L12() + R7Bp() <-> C7Bp() fRate36(),fRate36m() #Modifiers(species_1, species_12, species_19)
end reaction rules
end model
