###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1603080000', 'http://identifiers.org/biomodels.db/BIOMD0000000609']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/26348886']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/pubmed/26966512']
#@BQB_OCCURS_IN:['http://identifiers.org/bto/BTO:0000759']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/9606']
#@BQB_HAS_PROPERTY:['urn:miriam:efo:EFO%3A0004228']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:1901554']
#@creatorEmail:'viji@ebi.ac.uk'
#@creatorName:'Chelliah Vijayalakshmi'
#@notes:'This is a plain translation of an SBML model created on 13/08/2021. The original model has 5 molecules and 10 reactions. The translated model has 5 molecules and 10 rules'
###
begin model
begin parameters
	P0 1.32e-13
	dG 2.0
	bG 1.374e-14
	kGSH 1.6e+18
	kG 2.99
	kS 226000000000000.0
	bS 2.65e-14
	dS 2.0
	k450 0.315
	kN 0.0315
	kPSH 110.0
end parameters
begin molecule types
	Protein_adducts()
	Paracetamol_APAP()
	NAPQI()
	GSH()
	Sulphate_PAPS()
end molecule types
begin seed species
	Sulphate_PAPS()() (2.65e-14) / (2.0) #Sulphate__PAPS
	GSH()() (1.374e-14) / (2.0) #GSH
	Paracetamol_APAP()() (1.32e-13) #Paracetamol_APAP
end seed species
begin observables
	Species Sulphate_PAPS Sulphate_PAPS() #Sulphate_PAPS
	Species GSH GSH() #GSH
	Species NAPQI NAPQI() #NAPQI
	Species Paracetamol_APAP Paracetamol_APAP() #Paracetamol_APAP
	Species Protein_adducts Protein_adducts() #Protein_adducts
end observables
begin reaction rules
	reaction_1: Paracetamol_APAP() -> NAPQI() k450 #Modifiers(Paracetamol_APAP)
	R2: NAPQI() -> Paracetamol_APAP() kN #Modifiers(NAPQI)
	R3: Paracetamol_APAP() -> 0  kG #Modifiers(Paracetamol_APAP)
	R4: NAPQI() -> Protein_adducts() kPSH #Modifiers(NAPQI)
	R5: NAPQI() + GSH() -> 0  kGSH #Modifiers(NAPQI, GSH)
	R6: GSH() -> 0  dG #Modifiers(GSH)
	R7: 0  -> GSH() bG
	R8: Paracetamol_APAP() + Sulphate_PAPS() -> 0  kS #Modifiers(Paracetamol_APAP, Sulphate__PAPS)
	R9: Sulphate_PAPS() -> 0  dS #Modifiers(Sulphate__PAPS)
	R10: 0  -> Sulphate_PAPS() bS
end reaction rules
end model
