###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1703070000', 'http://identifiers.org/biomodels.db/BIOMD0000000628']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/22962589']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/biomodels.db/BIOMD0000000183']
#@BQB_IS_PART_OF:['http://identifiers.org/reactome/REACT_9053.2', 'http://identifiers.org/kegg.pathway/ko04720']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/40674']
#@BQB_HAS_PROPERTY:['http://identifiers.org/go/GO:1900452', 'http://identifiers.org/go/GO:0048167', 'http://identifiers.org/go/GO:1900271', 'http://identifiers.org/mamo/MAMO_0000046']
#@creatorEmail:'kothamav@babraham.ac.uk'
#@creatorName:'Kothamachu Varun'
#@notes:'This is a plain translation of an SBML model created on 14/08/2021. The original model has 135 molecules and 587 reactions. The translated model has 135 molecules and 587 rules'
###
begin model
begin parameters
	Cam_total 3.000145e-05
	PKA_total 1.2e-06
	K_CBPslow_Ca_off 10.0
	K_CamR_CaMKII_p_on 3200000.0
	K_D_PKA_off_p 2.7
	K_CamMKIIp_PP1a_on 3000000.0
	K_CamMKIIp_PP1a_off 0.5
	K_CamMKIIp_PP1a_p_off 2.0
	K_CBPslow_Ca_on 10000000.0
	K_CBPvslow_Ca_off 1.0
	K_CBPvslow_Ca_on 1000000.0
	K_Cam_Ca_on 1400000.0
	K_CamT_R 48.379294
	K_CamR_CaMKII_off 0.343
	K_CamR_PP2B_on 46000000.0
	K_CamR_PP2B_off 0.4
	K_CamR_CaMKIIp_off 0.001
	K_D_PKA_on 5600000.0
	K_D_PKA_off 10.8
	K_CamR_PP2B_Dp_on 4100000.0
	K_CamR_PP2B_Dp_off 6.4
	K_CamR_PP2B_D_off 0.2
	K_PP1a_Dp_on 4000000.0
	K_PP1a_Dp_off 0.4
	K_CBP_fast_on 1000000000.0
	K_CBP_fast_off 1000.0
	K_CBP_media_on 100000000.0
	K_CBP_media_off 100.0
	K_PP2Bi_Ca_on 20000000.0
	K_PP2Bi_Ca1_Ca_off 0.0092
	K_PP2Bi_Ca2_Ca_off 0.0312
	K_PP2Bi_Ca3_Ca_off 0.352
	K_PP2B_Ca_off 0.9
	C_A_B_C_D 0.00396
	k_for_CaMKII_autophosphorylation 6.3
	parameter_2 300.0
	parameter_4 100.0
	parameter_5 52.8
	parameter_10 8.32e-06
	parameter_11 1.66e-08
	parameter_12 1.74e-05
	parameter_13 1.45e-08
	parameter_14 20670.0
	Metabolite_8 (8e-05)
	Metabolite_9 (8e-05)
	Metabolite_10 (2e-05)
	Metabolite_11 (2e-05)
	Metabolite_6 (1.2e-08)
	ModelValue_128 (300.0)
	ModelValue_131 (52.8)
	ModelValue_130 (100.0)
	parameter_1 0
	parameter_3 0
	parameter_6 0
	parameter_7 0
	r1_km 0.000001
	r1_vmax 0.004000
	r2_v 0.000040
end parameters
begin molecule types
	CaMKIIp_PP1a()
	CamT_Ca1_D()
	CamR_Ca3_ACD_CaMKIIp()
	CamR_Ca2_BD_CaMKIIp()
	CamR_Ca2_BD_PP2B()
	CamR_Ca2_BC_CaMKIIp_PP1a()
	Dp_CamR_Ca1_B_PP2B()
	CamR_Ca2_AC_CaMKII()
	CamR_Ca2_AD_PP2B()
	CamR_Ca1_A_PP2B()
	CamT()
	CamT_Ca2_AB()
	CamR_Ca2_AC_PP2B()
	CBP_fast()
	PP1a_Dp()
	CamR_Ca2_AC_CaMKIIp_PP1a()
	Dp_CamR_Ca1_D_PP2B()
	CamR_Ca4_ABCD()
	CamR_Ca1_B_PP2B()
	CamR_Ca3_ABC_CaMKIIp_PP1a()
	Dp_CamR_Ca4_ABCD_PP2B()
	CamT_Ca1_C()
	CamR_Ca3_ACD()
	CamR_Ca3_BCD_CaMKIIp()
	CamR()
	CamR_Ca1_D()
	Dp_CamR_Ca3_ABD_PP2B()
	CamR_Ca4_ABCD_CaMKIIp()
	CamR_Ca3_ABC_PP2B()
	CamR_Ca1_B()
	CamR_CaMKIIp_PP1a()
	CamR_Ca1_D_CaMKII()
	CamR_Ca2_AB_CaMKIIp()
	CamR_Ca4_ABCD_PP2B()
	CamR_Ca1_C()
	Dp_CamR_Ca2_BC_PP2B()
	CamR_CaMKIIp()
	CamR_Ca1_A_CaMKII()
	CamR_Ca3_ACD_CaMKII()
	CBP_media()
	CamT_Ca2_AD()
	CamR_Ca1_C_CaMKII()
	CamR_Ca2_AD_CaMKIIp()
	PP2B()
	CamR_Ca1_C_CaMKIIp()
	CamR_Ca2_CD_PP2B()
	CamT_Ca1_B()
	CamR_Ca1_C_PP2B()
	CamR_Ca2_AC_CaMKIIp()
	CamR_Ca2_BC()
	CBP_media_Ca()
	CamR_Ca1_B_CaMKIIp_PP1a()
	CamR_Ca2_BC_CaMKIIp()
	CamR_Ca3_BCD_CaMKIIp_PP1a()
	Dp()
	CBP_fast_Ca()
	CamR_Ca3_BCD()
	CBP_slow()
	CamT_Ca1_A()
	Dp_CamR_Ca1_C_PP2B()
	CamR_Ca4_ABCD_CaMKII()
	CamR_Ca1_A_CaMKIIp()
	CamR_Ca2_AB()
	CamR_Ca2_AC()
	CamR_Ca2_AB_CaMKII()
	CamT_Ca3_ABC()
	CamR_Ca3_BCD_CaMKII()
	Dp_CamR_Ca1_A_PP2B()
	CamR_Ca2_AD()
	CaMKII()
	CamR_Ca3_ABD_CaMKII()
	CamR_Ca3_ABC()
	PKA()
	CamR_Ca3_ABD_CaMKIIp_PP1a()
	PP2Bi()
	Dp_CamR_Ca3_ABC_PP2B()
	Dp_CamR_Ca2_AD_PP2B()
	PP2Bi_Ca1()
	PP2Bi_Ca3()
	CamT_Ca2_BC()
	CamR_Ca3_ABD_CaMKIIp()
	CBP_vslow()
	CaMKIIp()
	CamR_Ca2_BD_CaMKII()
	CamR_Ca2_CD_CaMKII()
	CBP_slow_Ca()
	Dp_CamR_Ca2_AC_PP2B()
	Dp_CamR_Ca2_BD_PP2B()
	D()
	CamR_Ca1_D_CaMKIIp()
	CamT_Ca3_BCD()
	CamR_Ca2_AD_CaMKIIp_PP1a()
	Dp_CamR_Ca3_BCD_PP2B()
	PP2Bi_Ca2()
	CamR_Ca1_B_CaMKIIp()
	CamR_Ca3_ABC_CaMKIIp()
	CamT_Ca3_ACD()
	CamR_Ca2_AB_CaMKIIp_PP1a()
	CamT_Ca2_CD()
	CamR_Ca4_ABCD_CaMKIIp_PP1a()
	CamR_PP2B()
	CamR_Ca3_ACD_PP2B()
	CamT_Ca2_BD()
	CamR_Ca2_BC_PP2B()
	Dp_CamR_Ca3_ACD_PP2B()
	CamT_Ca3_ABD()
	CamR_Ca1_A()
	CamR_Ca2_BC_CaMKII()
	CamR_Ca1_B_CaMKII()
	CamR_Ca2_CD_CaMKIIp()
	CamR_Ca3_ACD_CaMKIIp_PP1a()
	Dp_CamR_PP2B()
	CamR_Ca3_BCD_PP2B()
	CamR_Ca3_ABD()
	CamR_Ca2_BD_CaMKIIp_PP1a()
	Ca()
	D_PKA()
	CamR_Ca1_C_CaMKIIp_PP1a()
	PP1a()
	CamR_Ca2_BD()
	CamT_Ca2_AC()
	CamR_Ca2_AD_CaMKII()
	CamR_Ca2_CD_CaMKIIp_PP1a()
	CamR_Ca1_D_PP2B()
	CamR_Ca1_D_CaMKIIp_PP1a()
	CamR_Ca3_ABC_CaMKII()
	CamR_CaMKII()
	CBP_vslow_Ca()
	CamR_Ca2_AB_PP2B()
	Dp_CamR_Ca2_AB_PP2B()
	CamR_Ca1_A_CaMKIIp_PP1a()
	CamT_Ca4_ABCD()
	CamR_Ca2_CD()
	Dp_CamR_Ca2_CD_PP2B()
	CamR_Ca3_ABD_PP2B()
end molecule types
begin seed species
	CamR() 873190000000000.0 # 1.45e-09mol/L * 6.022e23/mol *1.0L #CamR #CamR
	CamT() 1.8066000000000002e+19 #original 3e-05mol/L #CamT #CamT
	Ca() 6022000000000000.0 #original 1e-08mol/L #Ca #Ca
	CaMKII() 4.2154e+19 #original 7e-05mol/L #CaMKII #CaMKII
	D() 1.8066e+18 #original 3e-06mol/L #D #D
	PKA() 7226400000000000.0 #original 1.2e-08mol/L #PKA #PKA
	PP1a() 1.2044e+18 #original 2e-06mol/L #PP1a #PP1a
	CBP_fast() 4.817600000000001e+19 #original 8e-05mol/L #CBP_fast #CBPfast
	CBP_media() 4.817600000000001e+19 #original 8e-05mol/L #CBP_media #CBPmedia
	CBP_slow() 1.2044000000000002e+19 #original 2e-05mol/L #CBP_slow #CBPslow
	CBP_vslow() 1.2044000000000002e+19 #original 2e-05mol/L #CBP_vslow #CBPvslow
	PP2Bi() 3.6132e+18 #original 6e-06mol/L #PP2Bi #PP2Bi
end seed species
begin observables
	Species CamR CamR() #CamR
	Species CamT CamT() #CamT
	Species Ca Ca() #Ca
	Species CaMKII CaMKII() #CaMKII
	Species PP2B PP2B() #PP2B
	Species D D() #D
	Species PKA PKA() #PKA
	Species PP1a PP1a() #PP1a
	Species CBP_fast CBP_fast() #CBP_fast
	Species CBP_media CBP_media() #CBP_media
	Species CBP_slow CBP_slow() #CBP_slow
	Species CBP_vslow CBP_vslow() #CBP_vslow
	Species CBP_fast_Ca CBP_fast_Ca() #CBP_fast_Ca
	Species CBP_media_Ca CBP_media_Ca() #CBP_media_Ca
	Species CBP_slow_Ca CBP_slow_Ca() #CBP_slow_Ca
	Species CBP_vslow_Ca CBP_vslow_Ca() #CBP_vslow_Ca
	Species CamR_Ca1_A CamR_Ca1_A() #CamR_Ca1_A
	Species CamR_Ca1_B CamR_Ca1_B() #CamR_Ca1_B
	Species CamR_Ca1_C CamR_Ca1_C() #CamR_Ca1_C
	Species CamR_Ca1_D CamR_Ca1_D() #CamR_Ca1_D
	Species CamR_Ca2_AB CamR_Ca2_AB() #CamR_Ca2_AB
	Species CamR_Ca2_AC CamR_Ca2_AC() #CamR_Ca2_AC
	Species CamR_Ca2_AD CamR_Ca2_AD() #CamR_Ca2_AD
	Species CamR_Ca2_BC CamR_Ca2_BC() #CamR_Ca2_BC
	Species CamR_Ca2_BD CamR_Ca2_BD() #CamR_Ca2_BD
	Species CamR_Ca2_CD CamR_Ca2_CD() #CamR_Ca2_CD
	Species CamR_Ca3_ABC CamR_Ca3_ABC() #CamR_Ca3_ABC
	Species CamR_Ca3_ABD CamR_Ca3_ABD() #CamR_Ca3_ABD
	Species CamR_Ca3_ACD CamR_Ca3_ACD() #CamR_Ca3_ACD
	Species CamR_Ca3_BCD CamR_Ca3_BCD() #CamR_Ca3_BCD
	Species CamR_Ca4_ABCD CamR_Ca4_ABCD() #CamR_Ca4_ABCD
	Species CamT_Ca1_A CamT_Ca1_A() #CamT_Ca1_A
	Species CamT_Ca1_B CamT_Ca1_B() #CamT_Ca1_B
	Species CamT_Ca1_C CamT_Ca1_C() #CamT_Ca1_C
	Species CamT_Ca1_D CamT_Ca1_D() #CamT_Ca1_D
	Species CamT_Ca2_AB CamT_Ca2_AB() #CamT_Ca2_AB
	Species CamT_Ca2_AC CamT_Ca2_AC() #CamT_Ca2_AC
	Species CamT_Ca2_AD CamT_Ca2_AD() #CamT_Ca2_AD
	Species CamT_Ca2_BC CamT_Ca2_BC() #CamT_Ca2_BC
	Species CamT_Ca2_BD CamT_Ca2_BD() #CamT_Ca2_BD
	Species CamT_Ca2_CD CamT_Ca2_CD() #CamT_Ca2_CD
	Species CamT_Ca3_ABC CamT_Ca3_ABC() #CamT_Ca3_ABC
	Species CamT_Ca3_ABD CamT_Ca3_ABD() #CamT_Ca3_ABD
	Species CamT_Ca3_ACD CamT_Ca3_ACD() #CamT_Ca3_ACD
	Species CamT_Ca3_BCD CamT_Ca3_BCD() #CamT_Ca3_BCD
	Species CamT_Ca4_ABCD CamT_Ca4_ABCD() #CamT_Ca4_ABCD
	Species CamR_CaMKII CamR_CaMKII() #CamR_CaMKII
	Species CamR_Ca1_A_CaMKII CamR_Ca1_A_CaMKII() #CamR_Ca1_A_CaMKII
	Species CamR_Ca1_B_CaMKII CamR_Ca1_B_CaMKII() #CamR_Ca1_B_CaMKII
	Species CamR_Ca1_C_CaMKII CamR_Ca1_C_CaMKII() #CamR_Ca1_C_CaMKII
	Species CamR_Ca1_D_CaMKII CamR_Ca1_D_CaMKII() #CamR_Ca1_D_CaMKII
	Species CamR_Ca2_AB_CaMKII CamR_Ca2_AB_CaMKII() #CamR_Ca2_AB_CaMKII
	Species CamR_Ca2_AC_CaMKII CamR_Ca2_AC_CaMKII() #CamR_Ca2_AC_CaMKII
	Species CamR_Ca2_AD_CaMKII CamR_Ca2_AD_CaMKII() #CamR_Ca2_AD_CaMKII
	Species CamR_Ca2_BC_CaMKII CamR_Ca2_BC_CaMKII() #CamR_Ca2_BC_CaMKII
	Species CamR_Ca2_BD_CaMKII CamR_Ca2_BD_CaMKII() #CamR_Ca2_BD_CaMKII
	Species CamR_Ca2_CD_CaMKII CamR_Ca2_CD_CaMKII() #CamR_Ca2_CD_CaMKII
	Species CamR_Ca3_ABC_CaMKII CamR_Ca3_ABC_CaMKII() #CamR_Ca3_ABC_CaMKII
	Species CamR_Ca3_ABD_CaMKII CamR_Ca3_ABD_CaMKII() #CamR_Ca3_ABD_CaMKII
	Species CamR_Ca3_ACD_CaMKII CamR_Ca3_ACD_CaMKII() #CamR_Ca3_ACD_CaMKII
	Species CamR_Ca3_BCD_CaMKII CamR_Ca3_BCD_CaMKII() #CamR_Ca3_BCD_CaMKII
	Species CamR_Ca4_ABCD_CaMKII CamR_Ca4_ABCD_CaMKII() #CamR_Ca4_ABCD_CaMKII
	Species CamR_PP2B CamR_PP2B() #CamR_PP2B
	Species CamR_Ca1_A_PP2B CamR_Ca1_A_PP2B() #CamR_Ca1_A_PP2B
	Species CamR_Ca1_B_PP2B CamR_Ca1_B_PP2B() #CamR_Ca1_B_PP2B
	Species CamR_Ca1_C_PP2B CamR_Ca1_C_PP2B() #CamR_Ca1_C_PP2B
	Species CamR_Ca1_D_PP2B CamR_Ca1_D_PP2B() #CamR_Ca1_D_PP2B
	Species CamR_Ca2_AB_PP2B CamR_Ca2_AB_PP2B() #CamR_Ca2_AB_PP2B
	Species CamR_Ca2_AC_PP2B CamR_Ca2_AC_PP2B() #CamR_Ca2_AC_PP2B
	Species CamR_Ca2_AD_PP2B CamR_Ca2_AD_PP2B() #CamR_Ca2_AD_PP2B
	Species CamR_Ca2_BC_PP2B CamR_Ca2_BC_PP2B() #CamR_Ca2_BC_PP2B
	Species CamR_Ca2_BD_PP2B CamR_Ca2_BD_PP2B() #CamR_Ca2_BD_PP2B
	Species CamR_Ca2_CD_PP2B CamR_Ca2_CD_PP2B() #CamR_Ca2_CD_PP2B
	Species CamR_Ca3_ABC_PP2B CamR_Ca3_ABC_PP2B() #CamR_Ca3_ABC_PP2B
	Species CamR_Ca3_ABD_PP2B CamR_Ca3_ABD_PP2B() #CamR_Ca3_ABD_PP2B
	Species CamR_Ca3_ACD_PP2B CamR_Ca3_ACD_PP2B() #CamR_Ca3_ACD_PP2B
	Species CamR_Ca3_BCD_PP2B CamR_Ca3_BCD_PP2B() #CamR_Ca3_BCD_PP2B
	Species CamR_Ca4_ABCD_PP2B CamR_Ca4_ABCD_PP2B() #CamR_Ca4_ABCD_PP2B
	Species CaMKIIp CaMKIIp() #CaMKIIp
	Species CamR_CaMKIIp CamR_CaMKIIp() #CamR_CaMKIIp
	Species CamR_Ca1_A_CaMKIIp CamR_Ca1_A_CaMKIIp() #CamR_Ca1_A_CaMKIIp
	Species CamR_Ca1_B_CaMKIIp CamR_Ca1_B_CaMKIIp() #CamR_Ca1_B_CaMKIIp
	Species CamR_Ca1_C_CaMKIIp CamR_Ca1_C_CaMKIIp() #CamR_Ca1_C_CaMKIIp
	Species CamR_Ca1_D_CaMKIIp CamR_Ca1_D_CaMKIIp() #CamR_Ca1_D_CaMKIIp
	Species CamR_Ca2_AB_CaMKIIp CamR_Ca2_AB_CaMKIIp() #CamR_Ca2_AB_CaMKIIp
	Species CamR_Ca2_AC_CaMKIIp CamR_Ca2_AC_CaMKIIp() #CamR_Ca2_AC_CaMKIIp
	Species CamR_Ca2_AD_CaMKIIp CamR_Ca2_AD_CaMKIIp() #CamR_Ca2_AD_CaMKIIp
	Species CamR_Ca2_BC_CaMKIIp CamR_Ca2_BC_CaMKIIp() #CamR_Ca2_BC_CaMKIIp
	Species CamR_Ca2_BD_CaMKIIp CamR_Ca2_BD_CaMKIIp() #CamR_Ca2_BD_CaMKIIp
	Species CamR_Ca2_CD_CaMKIIp CamR_Ca2_CD_CaMKIIp() #CamR_Ca2_CD_CaMKIIp
	Species CamR_Ca3_ABC_CaMKIIp CamR_Ca3_ABC_CaMKIIp() #CamR_Ca3_ABC_CaMKIIp
	Species CamR_Ca3_ABD_CaMKIIp CamR_Ca3_ABD_CaMKIIp() #CamR_Ca3_ABD_CaMKIIp
	Species CamR_Ca3_ACD_CaMKIIp CamR_Ca3_ACD_CaMKIIp() #CamR_Ca3_ACD_CaMKIIp
	Species CamR_Ca3_BCD_CaMKIIp CamR_Ca3_BCD_CaMKIIp() #CamR_Ca3_BCD_CaMKIIp
	Species CamR_Ca4_ABCD_CaMKIIp CamR_Ca4_ABCD_CaMKIIp() #CamR_Ca4_ABCD_CaMKIIp
	Species Dp Dp() #Dp
	Species D_PKA D_PKA() #D_PKA
	Species Dp_CamR_PP2B Dp_CamR_PP2B() #Dp_CamR_PP2B
	Species Dp_CamR_Ca1_A_PP2B Dp_CamR_Ca1_A_PP2B() #Dp_CamR_Ca1_A_PP2B
	Species Dp_CamR_Ca1_B_PP2B Dp_CamR_Ca1_B_PP2B() #Dp_CamR_Ca1_B_PP2B
	Species Dp_CamR_Ca1_C_PP2B Dp_CamR_Ca1_C_PP2B() #Dp_CamR_Ca1_C_PP2B
	Species Dp_CamR_Ca1_D_PP2B Dp_CamR_Ca1_D_PP2B() #Dp_CamR_Ca1_D_PP2B
	Species Dp_CamR_Ca2_AB_PP2B Dp_CamR_Ca2_AB_PP2B() #Dp_CamR_Ca2_AB_PP2B
	Species Dp_CamR_Ca2_AC_PP2B Dp_CamR_Ca2_AC_PP2B() #Dp_CamR_Ca2_AC_PP2B
	Species Dp_CamR_Ca2_AD_PP2B Dp_CamR_Ca2_AD_PP2B() #Dp_CamR_Ca2_AD_PP2B
	Species Dp_CamR_Ca2_BC_PP2B Dp_CamR_Ca2_BC_PP2B() #Dp_CamR_Ca2_BC_PP2B
	Species Dp_CamR_Ca2_BD_PP2B Dp_CamR_Ca2_BD_PP2B() #Dp_CamR_Ca2_BD_PP2B
	Species Dp_CamR_Ca2_CD_PP2B Dp_CamR_Ca2_CD_PP2B() #Dp_CamR_Ca2_CD_PP2B
	Species Dp_CamR_Ca3_ABC_PP2B Dp_CamR_Ca3_ABC_PP2B() #Dp_CamR_Ca3_ABC_PP2B
	Species Dp_CamR_Ca3_ABD_PP2B Dp_CamR_Ca3_ABD_PP2B() #Dp_CamR_Ca3_ABD_PP2B
	Species Dp_CamR_Ca3_ACD_PP2B Dp_CamR_Ca3_ACD_PP2B() #Dp_CamR_Ca3_ACD_PP2B
	Species Dp_CamR_Ca3_BCD_PP2B Dp_CamR_Ca3_BCD_PP2B() #Dp_CamR_Ca3_BCD_PP2B
	Species Dp_CamR_Ca4_ABCD_PP2B Dp_CamR_Ca4_ABCD_PP2B() #Dp_CamR_Ca4_ABCD_PP2B
	Species PP1a_Dp PP1a_Dp() #PP1a_Dp
	Species CaMKIIp_PP1a CaMKIIp_PP1a() #CaMKIIp_PP1a
	Species CamR_CaMKIIp_PP1a CamR_CaMKIIp_PP1a() #CamR_CaMKIIp_PP1a
	Species CamR_Ca1_A_CaMKIIp_PP1a CamR_Ca1_A_CaMKIIp_PP1a() #CamR_Ca1_A_CaMKIIp_PP1a
	Species CamR_Ca1_B_CaMKIIp_PP1a CamR_Ca1_B_CaMKIIp_PP1a() #CamR_Ca1_B_CaMKIIp_PP1a
	Species CamR_Ca1_C_CaMKIIp_PP1a CamR_Ca1_C_CaMKIIp_PP1a() #CamR_Ca1_C_CaMKIIp_PP1a
	Species CamR_Ca1_D_CaMKIIp_PP1a CamR_Ca1_D_CaMKIIp_PP1a() #CamR_Ca1_D_CaMKIIp_PP1a
	Species CamR_Ca2_AB_CaMKIIp_PP1a CamR_Ca2_AB_CaMKIIp_PP1a() #CamR_Ca2_AB_CaMKIIp_PP1a
	Species CamR_Ca2_AC_CaMKIIp_PP1a CamR_Ca2_AC_CaMKIIp_PP1a() #CamR_Ca2_AC_CaMKIIp_PP1a
	Species CamR_Ca2_AD_CaMKIIp_PP1a CamR_Ca2_AD_CaMKIIp_PP1a() #CamR_Ca2_AD_CaMKIIp_PP1a
	Species CamR_Ca2_BC_CaMKIIp_PP1a CamR_Ca2_BC_CaMKIIp_PP1a() #CamR_Ca2_BC_CaMKIIp_PP1a
	Species CamR_Ca2_BD_CaMKIIp_PP1a CamR_Ca2_BD_CaMKIIp_PP1a() #CamR_Ca2_BD_CaMKIIp_PP1a
	Species CamR_Ca2_CD_CaMKIIp_PP1a CamR_Ca2_CD_CaMKIIp_PP1a() #CamR_Ca2_CD_CaMKIIp_PP1a
	Species CamR_Ca3_ABC_CaMKIIp_PP1a CamR_Ca3_ABC_CaMKIIp_PP1a() #CamR_Ca3_ABC_CaMKIIp_PP1a
	Species CamR_Ca3_ABD_CaMKIIp_PP1a CamR_Ca3_ABD_CaMKIIp_PP1a() #CamR_Ca3_ABD_CaMKIIp_PP1a
	Species CamR_Ca3_ACD_CaMKIIp_PP1a CamR_Ca3_ACD_CaMKIIp_PP1a() #CamR_Ca3_ACD_CaMKIIp_PP1a
	Species CamR_Ca3_BCD_CaMKIIp_PP1a CamR_Ca3_BCD_CaMKIIp_PP1a() #CamR_Ca3_BCD_CaMKIIp_PP1a
	Species CamR_Ca4_ABCD_CaMKIIp_PP1a CamR_Ca4_ABCD_CaMKIIp_PP1a() #CamR_Ca4_ABCD_CaMKIIp_PP1a
	Species PP2Bi PP2Bi() #PP2Bi
	Species PP2Bi_Ca1 PP2Bi_Ca1() #PP2Bi_Ca1
	Species PP2Bi_Ca2 PP2Bi_Ca2() #PP2Bi_Ca2
	Species PP2Bi_Ca3 PP2Bi_Ca3() #PP2Bi_Ca3
end observables
begin functions
	Free_CamR_Ca2_total() = CamR_Ca2_AB + CamR_Ca2_AC + CamR_Ca2_AD + CamR_Ca2_BC + CamR_Ca2_BD + CamR_Ca2_CD
	Free_CamT_Ca2_total() = CamT_Ca2_AB + CamT_Ca2_AC + CamT_Ca2_AD + CamT_Ca2_BC + CamT_Ca2_BD + CamT_Ca2_CD
	Free_Cam_Ca2_total() = Free_CamR_Ca2_total + Free_CamT_Ca2_total
	Dp_0_PP2B_CamR_Ca2() = CamR_Ca2_AB_PP2B + CamR_Ca2_AC_PP2B + CamR_Ca2_AD_PP2B + CamR_Ca2_BC_PP2B + CamR_Ca2_BD_PP2B + CamR_Ca2_CD_PP2B + Dp_CamR_Ca2_AB_PP2B + Dp_CamR_Ca2_AC_PP2B + Dp_CamR_Ca2_AD_PP2B + Dp_CamR_Ca2_BC_PP2B + Dp_CamR_Ca2_BD_PP2B + Dp_CamR_Ca2_CD_PP2B
	CaMKII_CamR_Ca2_total() = CamR_Ca2_AB_CaMKII + CamR_Ca2_AB_CaMKIIp + CamR_Ca2_AB_CaMKIIp_PP1a + CamR_Ca2_AC_CaMKII + CamR_Ca2_AC_CaMKIIp + CamR_Ca2_AC_CaMKIIp_PP1a + CamR_Ca2_AD_CaMKII + CamR_Ca2_AD_CaMKIIp + CamR_Ca2_AD_CaMKIIp_PP1a + CamR_Ca2_BC_CaMKII + CamR_Ca2_BC_CaMKIIp + CamR_Ca2_BC_CaMKIIp_PP1a + CamR_Ca2_BD_CaMKII + CamR_Ca2_BD_CaMKIIp + CamR_Ca2_BD_CaMKIIp_PP1a + CamR_Ca2_CD_CaMKII + CamR_Ca2_CD_CaMKIIp + CamR_Ca2_CD_CaMKIIp_PP1a
	Cam_Ca2_total() = CaMKII_CamR_Ca2_total + Dp_0_PP2B_CamR_Ca2 + Free_Cam_Ca2_total
	Free_CamT_Ca1_total() = CamT_Ca1_A + CamT_Ca1_B + CamT_Ca1_C + CamT_Ca1_D
	Free_CamR_Ca1_total() = CamR_Ca1_A + CamR_Ca1_B + CamR_Ca1_C + CamR_Ca1_D
	Free_Cam_Ca1_total() = Free_CamR_Ca1_total + Free_CamT_Ca1_total
	CaMKII_CamR_Ca1_total() = CamR_Ca1_A_CaMKII + CamR_Ca1_A_CaMKIIp + CamR_Ca1_A_CaMKIIp_PP1a + CamR_Ca1_B_CaMKII + CamR_Ca1_B_CaMKIIp + CamR_Ca1_B_CaMKIIp_PP1a + CamR_Ca1_C_CaMKII + CamR_Ca1_C_CaMKIIp + CamR_Ca1_C_CaMKIIp_PP1a + CamR_Ca1_D_CaMKII + CamR_Ca1_D_CaMKIIp + CamR_Ca1_D_CaMKIIp_PP1a
	Dp_0_PP2B_CamR_Ca1() = CamR_Ca1_A_PP2B + CamR_Ca1_B_PP2B + CamR_Ca1_C_PP2B + CamR_Ca1_D_PP2B + Dp_CamR_Ca1_A_PP2B + Dp_CamR_Ca1_B_PP2B + Dp_CamR_Ca1_C_PP2B + Dp_CamR_Ca1_D_PP2B
	Cam_Ca1_total() = CaMKII_CamR_Ca1_total + Dp_0_PP2B_CamR_Ca1 + Free_Cam_Ca1_total
	Cam_Ca4_total() = CamR_Ca4_ABCD + CamR_Ca4_ABCD_CaMKII + CamR_Ca4_ABCD_CaMKIIp + CamR_Ca4_ABCD_CaMKIIp_PP1a + CamR_Ca4_ABCD_PP2B + CamT_Ca4_ABCD + Dp_CamR_Ca4_ABCD_PP2B
	CaMKII_CamR_Ca3_total() = CamR_Ca3_ABC_CaMKII + CamR_Ca3_ABC_CaMKIIp + CamR_Ca3_ABC_CaMKIIp_PP1a + CamR_Ca3_ABD_CaMKII + CamR_Ca3_ABD_CaMKIIp + CamR_Ca3_ABD_CaMKIIp_PP1a + CamR_Ca3_ACD_CaMKII + CamR_Ca3_ACD_CaMKIIp + CamR_Ca3_ACD_CaMKIIp_PP1a + CamR_Ca3_BCD_CaMKII + CamR_Ca3_BCD_CaMKIIp + CamR_Ca3_BCD_CaMKIIp_PP1a
	Dp_0_PP2B_CamR_Ca3() = CamR_Ca3_ABC_PP2B + CamR_Ca3_ABD_PP2B + CamR_Ca3_ACD_PP2B + CamR_Ca3_BCD_PP2B + Dp_CamR_Ca3_ABC_PP2B + Dp_CamR_Ca3_ABD_PP2B + Dp_CamR_Ca3_ACD_PP2B + Dp_CamR_Ca3_BCD_PP2B
	Free_CamR_Ca3_total() = CamR_Ca3_ABC + CamR_Ca3_ABD + CamR_Ca3_ACD + CamR_Ca3_BCD
	Cam_Ca3_total() = CaMKII_CamR_Ca3_total + Dp_0_PP2B_CamR_Ca3 + Free_CamR_Ca3_total
	moles_bound_Ca_per_moles_Cam() = (Cam_Ca1_total + 2*Cam_Ca2_total + 3*Cam_Ca3_total + 4*Cam_Ca4_total)/Cam_total
	CamR_Ca1_total() = CaMKII_CamR_Ca1_total + Dp_0_PP2B_CamR_Ca1 + Free_CamR_Ca1_total
	CamR_unbound() = CamR + CamR_Ca1_A + CamR_Ca1_B + CamR_Ca1_C + CamR_Ca1_D + CamR_Ca2_AB + CamR_Ca2_AC + CamR_Ca2_AD + CamR_Ca2_BC + CamR_Ca2_BD + CamR_Ca2_CD + CamR_Ca3_ABC + CamR_Ca3_ABD + CamR_Ca3_ACD + CamR_Ca3_BCD + CamR_Ca4_ABCD
	PP2B_bound_total() = CamR_Ca4_ABCD_PP2B + CamR_PP2B + Dp_0_PP2B_CamR_Ca1 + Dp_0_PP2B_CamR_Ca2 + Dp_0_PP2B_CamR_Ca3 + Dp_CamR_Ca4_ABCD_PP2B + Dp_CamR_PP2B
	CaMKII_bound_total() = CaMKII_CamR_Ca1_total + CaMKII_CamR_Ca2_total + CaMKII_CamR_Ca3_total + CamR_Ca4_ABCD_CaMKII + CamR_Ca4_ABCD_CaMKIIp + CamR_Ca4_ABCD_CaMKIIp_PP1a + CamR_CaMKII + CamR_CaMKIIp + CamR_CaMKIIp_PP1a
	CamR_total() = CaMKII_bound_total + CamR_unbound + PP2B_bound_total
	CamR_Ca3_total() = CaMKII_CamR_Ca3_total + Dp_0_PP2B_CamR_Ca3 + Free_CamR_Ca3_total
	CamR_Ca2_total() = CaMKII_CamR_Ca2_total + Dp_0_PP2B_CamR_Ca2 + Free_CamR_Ca2_total
	CaMKII_total() = CaMKII + CaMKIIp + CaMKIIp_PP1a + CamR_Ca1_A_CaMKII + CamR_Ca1_A_CaMKIIp + CamR_Ca1_A_CaMKIIp_PP1a + CamR_Ca1_B_CaMKII + CamR_Ca1_B_CaMKIIp + CamR_Ca1_B_CaMKIIp_PP1a + CamR_Ca1_C_CaMKII + CamR_Ca1_C_CaMKIIp + CamR_Ca1_C_CaMKIIp_PP1a + CamR_Ca1_D_CaMKII + CamR_Ca1_D_CaMKIIp + CamR_Ca1_D_CaMKIIp_PP1a + CamR_Ca2_AB_CaMKII + CamR_Ca2_AB_CaMKIIp + CamR_Ca2_AB_CaMKIIp_PP1a + CamR_Ca2_AC_CaMKII + CamR_Ca2_AC_CaMKIIp + CamR_Ca2_AC_CaMKIIp_PP1a + CamR_Ca2_AD_CaMKII + CamR_Ca2_AD_CaMKIIp + CamR_Ca2_AD_CaMKIIp_PP1a + CamR_Ca2_BC_CaMKII + CamR_Ca2_BC_CaMKIIp + CamR_Ca2_BC_CaMKIIp_PP1a + CamR_Ca2_BD_CaMKII + CamR_Ca2_BD_CaMKIIp + CamR_Ca2_BD_CaMKIIp_PP1a + CamR_Ca2_CD_CaMKII + CamR_Ca2_CD_CaMKIIp + CamR_Ca2_CD_CaMKIIp_PP1a + CamR_Ca3_ABC_CaMKII + CamR_Ca3_ABC_CaMKIIp + CamR_Ca3_ABC_CaMKIIp_PP1a + CamR_Ca3_ABD_CaMKII + CamR_Ca3_ABD_CaMKIIp + CamR_Ca3_ABD_CaMKIIp_PP1a + CamR_Ca3_ACD_CaMKII + CamR_Ca3_ACD_CaMKIIp + CamR_Ca3_ACD_CaMKIIp_PP1a + CamR_Ca3_BCD_CaMKII + CamR_Ca3_BCD_CaMKIIp + CamR_Ca3_BCD_CaMKIIp_PP1a + CamR_Ca4_ABCD_CaMKII + CamR_Ca4_ABCD_CaMKIIp + CamR_Ca4_ABCD_CaMKIIp_PP1a + CamR_CaMKII + CamR_CaMKIIp + CamR_CaMKIIp_PP1a
	CaMKII_active_total() = CaMKIIp + CaMKIIp_PP1a + CamR_Ca1_A_CaMKII + CamR_Ca1_A_CaMKIIp + CamR_Ca1_A_CaMKIIp_PP1a + CamR_Ca1_B_CaMKII + CamR_Ca1_B_CaMKIIp + CamR_Ca1_B_CaMKIIp_PP1a + CamR_Ca1_C_CaMKII + CamR_Ca1_C_CaMKIIp + CamR_Ca1_C_CaMKIIp_PP1a + CamR_Ca1_D_CaMKII + CamR_Ca1_D_CaMKIIp + CamR_Ca1_D_CaMKIIp_PP1a + CamR_Ca2_AB_CaMKII + CamR_Ca2_AB_CaMKIIp + CamR_Ca2_AB_CaMKIIp_PP1a + CamR_Ca2_AC_CaMKII + CamR_Ca2_AC_CaMKIIp + CamR_Ca2_AC_CaMKIIp_PP1a + CamR_Ca2_AD_CaMKII + CamR_Ca2_AD_CaMKIIp + CamR_Ca2_AD_CaMKIIp_PP1a + CamR_Ca2_BC_CaMKII + CamR_Ca2_BC_CaMKIIp + CamR_Ca2_BC_CaMKIIp_PP1a + CamR_Ca2_BD_CaMKII + CamR_Ca2_BD_CaMKIIp + CamR_Ca2_BD_CaMKIIp_PP1a + CamR_Ca2_CD_CaMKII + CamR_Ca2_CD_CaMKIIp + CamR_Ca2_CD_CaMKIIp_PP1a + CamR_Ca3_ABC_CaMKII + CamR_Ca3_ABC_CaMKIIp + CamR_Ca3_ABC_CaMKIIp_PP1a + CamR_Ca3_ABD_CaMKII + CamR_Ca3_ABD_CaMKIIp + CamR_Ca3_ABD_CaMKIIp_PP1a + CamR_Ca3_ACD_CaMKII + CamR_Ca3_ACD_CaMKIIp + CamR_Ca3_ACD_CaMKIIp_PP1a + CamR_Ca3_BCD_CaMKII + CamR_Ca3_BCD_CaMKIIp + CamR_Ca3_BCD_CaMKIIp_PP1a + CamR_Ca4_ABCD_CaMKII + CamR_Ca4_ABCD_CaMKIIp + CamR_Ca4_ABCD_CaMKIIp_PP1a + CamR_CaMKII + CamR_CaMKIIp + CamR_CaMKIIp_PP1a
	CaMKII_active_ratio() = CaMKII_active_total/CaMKII_total
	CaMKIIp_total() = CaMKIIp + CaMKIIp_PP1a + CamR_Ca1_A_CaMKIIp + CamR_Ca1_A_CaMKIIp_PP1a + CamR_Ca1_B_CaMKIIp + CamR_Ca1_B_CaMKIIp_PP1a + CamR_Ca1_C_CaMKIIp + CamR_Ca1_C_CaMKIIp_PP1a + CamR_Ca1_D_CaMKIIp + CamR_Ca1_D_CaMKIIp_PP1a + CamR_Ca2_AB_CaMKIIp + CamR_Ca2_AB_CaMKIIp_PP1a + CamR_Ca2_AC_CaMKIIp + CamR_Ca2_AC_CaMKIIp_PP1a + CamR_Ca2_AD_CaMKIIp + CamR_Ca2_AD_CaMKIIp_PP1a + CamR_Ca2_BC_CaMKIIp + CamR_Ca2_BC_CaMKIIp_PP1a + CamR_Ca2_BD_CaMKIIp + CamR_Ca2_BD_CaMKIIp_PP1a + CamR_Ca2_CD_CaMKIIp + CamR_Ca2_CD_CaMKIIp_PP1a + CamR_Ca3_ABC_CaMKIIp + CamR_Ca3_ABC_CaMKIIp_PP1a + CamR_Ca3_ABD_CaMKIIp + CamR_Ca3_ABD_CaMKIIp_PP1a + CamR_Ca3_ACD_CaMKIIp + CamR_Ca3_ACD_CaMKIIp_PP1a + CamR_Ca3_BCD_CaMKIIp + CamR_Ca3_BCD_CaMKIIp_PP1a + CamR_Ca4_ABCD_CaMKIIp + CamR_Ca4_ABCD_CaMKIIp_PP1a + CamR_CaMKIIp + CamR_CaMKIIp_PP1a
	CaMKIIp_bar() = CaMKIIp_total/CaMKII_total
	PP1a_total() = CaMKIIp_PP1a + CamR_Ca1_A_CaMKIIp_PP1a + CamR_Ca1_B_CaMKIIp_PP1a + CamR_Ca1_C_CaMKIIp_PP1a + CamR_Ca1_D_CaMKIIp_PP1a + CamR_Ca2_AB_CaMKIIp_PP1a + CamR_Ca2_AC_CaMKIIp_PP1a + CamR_Ca2_AD_CaMKIIp_PP1a + CamR_Ca2_BC_CaMKIIp_PP1a + CamR_Ca2_BD_CaMKIIp_PP1a + CamR_Ca2_CD_CaMKIIp_PP1a + CamR_Ca3_ABC_CaMKIIp_PP1a + CamR_Ca3_ABD_CaMKIIp_PP1a + CamR_Ca3_ACD_CaMKIIp_PP1a + CamR_Ca3_BCD_CaMKIIp_PP1a + CamR_Ca4_ABCD_CaMKIIp_PP1a + CamR_CaMKIIp_PP1a + PP1a
	PP1_total() = CaMKIIp_PP1a + CamR_Ca1_A_CaMKIIp_PP1a + CamR_Ca1_B_CaMKIIp_PP1a + CamR_Ca1_C_CaMKIIp_PP1a + CamR_Ca1_D_CaMKIIp_PP1a + CamR_Ca2_AB_CaMKIIp_PP1a + CamR_Ca2_AC_CaMKIIp_PP1a + CamR_Ca2_AD_CaMKIIp_PP1a + CamR_Ca2_BC_CaMKIIp_PP1a + CamR_Ca2_BD_CaMKIIp_PP1a + CamR_Ca2_CD_CaMKIIp_PP1a + CamR_Ca3_ABC_CaMKIIp_PP1a + CamR_Ca3_ABD_CaMKIIp_PP1a + CamR_Ca3_ACD_CaMKIIp_PP1a + CamR_Ca3_BCD_CaMKIIp_PP1a + CamR_Ca4_ABCD_CaMKIIp_PP1a + CamR_CaMKIIp_PP1a + PP1a + PP1a_Dp
	PP1a_bar() = PP1a_total/PP1_total
	D_total() = D + D_PKA + Dp + Dp_CamR_Ca1_A_PP2B + Dp_CamR_Ca1_B_PP2B + Dp_CamR_Ca1_C_PP2B + Dp_CamR_Ca1_D_PP2B + Dp_CamR_Ca2_AB_PP2B + Dp_CamR_Ca2_AC_PP2B + Dp_CamR_Ca2_AD_PP2B + Dp_CamR_Ca2_BC_PP2B + Dp_CamR_Ca2_BD_PP2B + Dp_CamR_Ca2_CD_PP2B + Dp_CamR_Ca3_ABC_PP2B + Dp_CamR_Ca3_ABD_PP2B + Dp_CamR_Ca3_ACD_PP2B + Dp_CamR_Ca3_BCD_PP2B + Dp_CamR_Ca4_ABCD_PP2B + Dp_CamR_PP2B + PP1a_Dp
	Dp_total() = Dp + Dp_CamR_Ca1_A_PP2B + Dp_CamR_Ca1_B_PP2B + Dp_CamR_Ca1_C_PP2B + Dp_CamR_Ca1_D_PP2B + Dp_CamR_Ca2_AB_PP2B + Dp_CamR_Ca2_AC_PP2B + Dp_CamR_Ca2_AD_PP2B + Dp_CamR_Ca2_BC_PP2B + Dp_CamR_Ca2_BD_PP2B + Dp_CamR_Ca2_CD_PP2B + Dp_CamR_Ca3_ABC_PP2B + Dp_CamR_Ca3_ABD_PP2B + Dp_CamR_Ca3_ACD_PP2B + Dp_CamR_Ca3_BCD_PP2B + Dp_CamR_Ca4_ABCD_PP2B + Dp_CamR_PP2B + PP1a_Dp
	Dp_bar() = Dp_total/D_total
	PP2B_total() = PP2B + PP2B_bound_total + PP2Bi + PP2Bi_Ca1 + PP2Bi_Ca2 + PP2Bi_Ca3
	PP2B_bar() = PP2B_bound_total/PP2B_total
	CamT_total() = CamT + CamT_Ca1_A + CamT_Ca1_B + CamT_Ca1_C + CamT_Ca1_D + CamT_Ca2_AB + CamT_Ca2_AC + CamT_Ca2_AD + CamT_Ca2_BC + CamT_Ca2_BD + CamT_Ca2_CD + CamT_Ca3_ABC + CamT_Ca3_ABD + CamT_Ca3_ACD + CamT_Ca3_BCD + CamT_Ca4_ABCD
	CamR_ratio() = CamR_total/(CamR_total + CamT_total)
	Free_CamT_Ca3_total() = CamT_Ca3_ABC + CamT_Ca3_ABD + CamT_Ca3_ACD + CamT_Ca3_BCD
	Free_Cam_Ca3_total() = Free_CamR_Ca3_total + Free_CamT_Ca3_total
	PP2B_non_i() = PP2B_total - PP2Bi - PP2Bi_Ca1 - PP2Bi_Ca2 - PP2Bi_Ca3
	K_CamR_T() = K_CamT_R*parameter_14
	K_CamR_to_T_Ca4() = C_A_B_C_D^2*K_CamR_T
	K_CamR_to_T_Ca3() = C_A_B_C_D^(3/2)*K_CamR_T
	K_CamR_to_T_Ca1() = sqrt(C_A_B_C_D)*K_CamR_T
	K_CamR_to_T_Ca2() = C_A_B_C_D*K_CamR_T
	K_CamR_Ca_B_off() = K_Cam_Ca_on*parameter_11
	K_CamT_Ca_B_off() = K_CamR_Ca_B_off/C_A_B_C_D
	K_CamR_Ca_A_off() = K_Cam_Ca_on*parameter_10
	K_CamT_Ca_A_off() = K_CamR_Ca_A_off/C_A_B_C_D
	K_CamR_Ca_D_off() = K_Cam_Ca_on*parameter_13
	K_CamT_Ca_D_off() = K_CamR_Ca_D_off/C_A_B_C_D
	K_CamR_Ca_C_off() = K_Cam_Ca_on*parameter_12
	K_CamT_Ca_C_off() = K_CamR_Ca_C_off/C_A_B_C_D
	CamR_Ca1_ratio() = CamR_Ca1_total/Cam_total
	y_bar() = moles_bound_Ca_per_moles_Cam/4
	y_bar_div_1_minus_ybar() = y_bar/(1 - y_bar)
	CamPP2B_bar() = PP2B_bound_total/Cam_total
	CamCaMKII_bar() = CaMKII_bound_total/Cam_total
	CamR_Ca3_ratio() = CamR_Ca3_total/Cam_total
	Cam_Ca3_total_ratio() = Cam_Ca3_total/Cam_total
	CamR_Ca2_ratio() = CamR_Ca2_total/Cam_total
	Cam_Ca2_total_ratio() = Cam_Ca2_total/Cam_total
	Cam_Ca1_total_ratio() = Cam_Ca1_total/Cam_total
	PKA_inmodel() = D_PKA + PKA
	PKA_bar() = PKA_inmodel/PKA_total
	CBP_vslow_total() = Metabolite_11
	CBP_vslow_bar() = CBP_vslow_Ca/CBP_vslow_total
	CBP_slow_total() = Metabolite_10
	CBP_slow_bar() = CBP_slow_Ca/CBP_slow_total
	CBP_media_total() = Metabolite_9
	CBP_media_bar() = CBP_media_Ca/CBP_media_total
	CBP_fast_total() = Metabolite_8
	CBP_fast_bar() = CBP_fast_Ca/CBP_fast_total
	CamR_Ca4_total() = CamR_Ca4_ABCD + CamR_Ca4_ABCD_CaMKII + CamR_Ca4_ABCD_CaMKIIp + CamR_Ca4_ABCD_CaMKIIp_PP1a + CamR_Ca4_ABCD_PP2B + Dp_CamR_Ca4_ABCD_PP2B
	CamR_Ca4_ratio() = CamR_Ca4_total/Cam_total
	CamR_Ca0_total() = CamR + CamR_CaMKII + CamR_CaMKIIp + CamR_CaMKIIp_PP1a + CamR_PP2B + Dp_CamR_PP2B
	CamR_Ca0_ratio() = CamR_Ca0_total/Cam_total
	Cam_Ca4_total_ratio() = Cam_Ca4_total/Cam_total
	Cam_Ca0_total_0() = CamR + CamR_CaMKII + CamR_CaMKIIp + CamR_CaMKIIp_PP1a + CamR_PP2B + CamT + Dp_CamR_PP2B
	Cam_Ca0_total_ratio() = Cam_Ca0_total_0/Cam_total
	parameter_8() =  if((1/parameter_5<0.008),(5.736e-5*parameter_5),(0.00717))
	parameter_9() =  if((1/parameter_5<0.008),(1/parameter_5),(0.008))
	K_CaMKII_autoPhosphorylation() =  k_for_CaMKII_autophosphorylation* if(( ( -0.929*CaMKII_active_ratio^5+3.128*CaMKII_active_ratio^4-4.249*CaMKII_active_ratio^3+2.998*CaMKII_active_ratio^2+0.05152*CaMKII_active_ratio-0.001008 )   >= ( 0 )   ),( ( -0.929*CaMKII_active_ratio^5+3.128*CaMKII_active_ratio^4-4.249*CaMKII_active_ratio^3+2.998*CaMKII_active_ratio^2+0.05152*CaMKII_active_ratio-0.001008 )   ),( ( 0 )   )) 
	PKA_initial() = Metabolite_6
	K_CamT_to_R_Ca4() = K_CamT_R/C_A_B_C_D^2
	K_CamT_to_R_Ca3() = K_CamT_R/C_A_B_C_D^(3/2)
	K_CamT_to_R_Ca1() = K_CamT_R/sqrt(C_A_B_C_D)
	K_CamT_to_R_Ca2() = K_CamT_R/C_A_B_C_D
	Free_Cam_Ca4_total() = CamR_Ca4_ABCD + CamT_Ca4_ABCD
	Free_Cam_Ca0_total() = CamR + CamT
	Epsilon() = CamR/(CamR + CamT)
	fRate0() = 0.004/(Ca + 1.0e-6)
end functions
begin reaction rules
	Ca_pump: Ca() -> 0  fRate0()
	Ca_leak: 0  -> Ca() r2_v
	CBPslow_Ca_on: CBP_slow() + Ca() -> CBP_slow_Ca() K_CBPslow_Ca_on
	CBPslow_Ca_off: CBP_slow_Ca() -> CBP_slow() + Ca() K_CBPslow_Ca_off
	CBPvslow_Ca_on: CBP_vslow() + Ca() -> CBP_vslow_Ca() K_CBPvslow_Ca_on
	CBPvslow_Ca_off: CBP_vslow_Ca() -> CBP_vslow() + Ca() K_CBPvslow_Ca_off
	reaction_0: CamR() + Ca() -> CamR_Ca1_A() K_Cam_Ca_on
	reaction_1: CamR() + Ca() -> CamR_Ca1_B() K_Cam_Ca_on
	reaction_2: CamR() + Ca() -> CamR_Ca1_C() K_Cam_Ca_on
	reaction_3: CamR() + Ca() -> CamR_Ca1_D() K_Cam_Ca_on
	reaction_4: CamR_Ca1_A() -> CamR() + Ca() K_CamR_Ca_A_off
	reaction_5: CamR_Ca1_B() -> CamR() + Ca() K_CamR_Ca_B_off
	reaction_6: CamR_Ca1_C() -> CamR() + Ca() K_CamR_Ca_C_off
	reaction_7: CamR_Ca1_D() -> CamR() + Ca() K_CamR_Ca_D_off
	reaction_8: CamR_Ca1_A() + Ca() -> CamR_Ca2_AB() K_Cam_Ca_on
	reaction_9: CamR_Ca1_A() + Ca() -> CamR_Ca2_AC() K_Cam_Ca_on
	reaction_10: CamR_Ca1_A() + Ca() -> CamR_Ca2_AD() K_Cam_Ca_on
	reaction_11: CamR_Ca1_B() + Ca() -> CamR_Ca2_AB() K_Cam_Ca_on
	reaction_12: CamR_Ca1_B() + Ca() -> CamR_Ca2_BC() K_Cam_Ca_on
	reaction_13: CamR_Ca1_B() + Ca() -> CamR_Ca2_BD() K_Cam_Ca_on
	reaction_14: CamR_Ca1_C() + Ca() -> CamR_Ca2_AC() K_Cam_Ca_on
	reaction_15: CamR_Ca1_C() + Ca() -> CamR_Ca2_BC() K_Cam_Ca_on
	reaction_16: CamR_Ca1_C() + Ca() -> CamR_Ca2_CD() K_Cam_Ca_on
	reaction_17: CamR_Ca1_D() + Ca() -> CamR_Ca2_AD() K_Cam_Ca_on
	reaction_18: CamR_Ca1_D() + Ca() -> CamR_Ca2_BD() K_Cam_Ca_on
	reaction_19: CamR_Ca1_D() + Ca() -> CamR_Ca2_CD() K_Cam_Ca_on
	reaction_20: CamR_Ca2_AB() -> CamR_Ca1_A() + Ca() K_CamR_Ca_B_off
	reaction_21: CamR_Ca2_AC() -> CamR_Ca1_A() + Ca() K_CamR_Ca_C_off
	reaction_22: CamR_Ca2_AD() -> CamR_Ca1_A() + Ca() K_CamR_Ca_D_off
	reaction_23: CamR_Ca2_AB() -> CamR_Ca1_B() + Ca() K_CamR_Ca_A_off
	reaction_24: CamR_Ca2_BC() -> CamR_Ca1_B() + Ca() K_CamR_Ca_C_off
	reaction_25: CamR_Ca2_BD() -> CamR_Ca1_B() + Ca() K_CamR_Ca_D_off
	reaction_26: CamR_Ca2_AC() -> CamR_Ca1_C() + Ca() K_CamR_Ca_A_off
	reaction_27: CamR_Ca2_BC() -> CamR_Ca1_C() + Ca() K_CamR_Ca_B_off
	reaction_28: CamR_Ca2_CD() -> CamR_Ca1_C() + Ca() K_CamR_Ca_D_off
	reaction_29: CamR_Ca2_AD() -> CamR_Ca1_D() + Ca() K_CamR_Ca_A_off
	reaction_30: CamR_Ca2_BD() -> CamR_Ca1_D() + Ca() K_CamR_Ca_B_off
	reaction_31: CamR_Ca2_CD() -> CamR_Ca1_D() + Ca() K_CamR_Ca_C_off
	reaction_32: CamR_Ca2_AB() + Ca() -> CamR_Ca3_ABC() K_Cam_Ca_on
	reaction_33: CamR_Ca2_AB() + Ca() -> CamR_Ca3_ABD() K_Cam_Ca_on
	reaction_34: CamR_Ca2_AC() + Ca() -> CamR_Ca3_ABC() K_Cam_Ca_on
	reaction_35: CamR_Ca2_AC() + Ca() -> CamR_Ca3_ACD() K_Cam_Ca_on
	reaction_36: CamR_Ca2_AD() + Ca() -> CamR_Ca3_ABD() K_Cam_Ca_on
	reaction_37: CamR_Ca2_AD() + Ca() -> CamR_Ca3_ACD() K_Cam_Ca_on
	reaction_38: CamR_Ca2_BC() + Ca() -> CamR_Ca3_ABC() K_Cam_Ca_on
	reaction_39: CamR_Ca2_BC() + Ca() -> CamR_Ca3_BCD() K_Cam_Ca_on
	reaction_40: CamR_Ca2_BD() + Ca() -> CamR_Ca3_ABD() K_Cam_Ca_on
	reaction_41: CamR_Ca2_BD() + Ca() -> CamR_Ca3_BCD() K_Cam_Ca_on
	reaction_42: CamR_Ca2_CD() + Ca() -> CamR_Ca3_ACD() K_Cam_Ca_on
	reaction_43: CamR_Ca2_CD() + Ca() -> CamR_Ca3_BCD() K_Cam_Ca_on
	reaction_44: CamR_Ca3_ABC() -> CamR_Ca2_BC() + Ca() K_CamR_Ca_A_off
	reaction_45: CamR_Ca3_ABC() -> CamR_Ca2_AC() + Ca() K_CamR_Ca_B_off
	reaction_46: CamR_Ca3_ABC() -> CamR_Ca2_AB() + Ca() K_CamR_Ca_C_off
	reaction_47: CamR_Ca3_ABD() -> CamR_Ca2_BD() + Ca() K_CamR_Ca_A_off
	reaction_48: CamR_Ca3_ABD() -> CamR_Ca2_AD() + Ca() K_CamR_Ca_B_off
	reaction_49: CamR_Ca3_ABD() -> CamR_Ca2_AB() + Ca() K_CamR_Ca_D_off
	reaction_50: CamR_Ca3_ACD() -> CamR_Ca2_CD() + Ca() K_CamR_Ca_A_off
	reaction_51: CamR_Ca3_ACD() -> CamR_Ca2_AD() + Ca() K_CamR_Ca_C_off
	reaction_52: CamR_Ca3_ACD() -> CamR_Ca2_AC() + Ca() K_CamR_Ca_D_off
	reaction_53: CamR_Ca3_BCD() -> CamR_Ca2_CD() + Ca() K_CamR_Ca_B_off
	reaction_54: CamR_Ca3_BCD() -> CamR_Ca2_BD() + Ca() K_CamR_Ca_C_off
	reaction_55: CamR_Ca3_BCD() -> CamR_Ca2_BC() + Ca() K_CamR_Ca_D_off
	reaction_56: CamR_Ca3_ABC() + Ca() -> CamR_Ca4_ABCD() K_Cam_Ca_on
	reaction_57: CamR_Ca3_ABD() + Ca() -> CamR_Ca4_ABCD() K_Cam_Ca_on
	reaction_58: CamR_Ca3_ACD() + Ca() -> CamR_Ca4_ABCD() K_Cam_Ca_on
	reaction_59: CamR_Ca3_BCD() + Ca() -> CamR_Ca4_ABCD() K_Cam_Ca_on
	reaction_60: CamR_Ca4_ABCD() -> CamR_Ca3_ABC() + Ca() K_CamR_Ca_D_off
	reaction_61: CamR_Ca4_ABCD() -> CamR_Ca3_ABD() + Ca() K_CamR_Ca_C_off
	reaction_62: CamR_Ca4_ABCD() -> CamR_Ca3_ACD() + Ca() K_CamR_Ca_B_off
	reaction_63: CamR_Ca4_ABCD() -> CamR_Ca3_BCD() + Ca() K_CamR_Ca_A_off
	reaction_64: CamT() + Ca() -> CamT_Ca1_A() K_Cam_Ca_on
	reaction_65: CamT() + Ca() -> CamT_Ca1_B() K_Cam_Ca_on
	reaction_66: CamT() + Ca() -> CamT_Ca1_C() K_Cam_Ca_on
	reaction_67: CamT() + Ca() -> CamT_Ca1_D() K_Cam_Ca_on
	reaction_68: CamT_Ca1_A() -> CamT() + Ca() K_CamT_Ca_A_off
	reaction_69: CamT_Ca1_B() -> CamT() + Ca() K_CamT_Ca_B_off
	reaction_70: CamT_Ca1_C() -> CamT() + Ca() K_CamT_Ca_C_off
	reaction_71: CamT_Ca1_D() -> CamT() + Ca() K_CamT_Ca_D_off
	reaction_72: CamT_Ca1_A() + Ca() -> CamT_Ca2_AB() K_Cam_Ca_on
	reaction_73: CamT_Ca1_A() + Ca() -> CamT_Ca2_AC() K_Cam_Ca_on
	reaction_74: CamT_Ca1_A() + Ca() -> CamT_Ca2_AD() K_Cam_Ca_on
	reaction_75: CamT_Ca1_B() + Ca() -> CamT_Ca2_AB() K_Cam_Ca_on
	reaction_76: CamT_Ca1_B() + Ca() -> CamT_Ca2_BC() K_Cam_Ca_on
	reaction_77: CamT_Ca1_B() + Ca() -> CamT_Ca2_BD() K_Cam_Ca_on
	reaction_78: CamT_Ca1_C() + Ca() -> CamT_Ca2_AC() K_Cam_Ca_on
	reaction_79: CamT_Ca1_C() + Ca() -> CamT_Ca2_BC() K_Cam_Ca_on
	reaction_80: CamT_Ca1_C() + Ca() -> CamT_Ca2_CD() K_Cam_Ca_on
	reaction_81: CamT_Ca1_D() + Ca() -> CamT_Ca2_AD() K_Cam_Ca_on
	reaction_82: CamT_Ca1_D() + Ca() -> CamT_Ca2_BD() K_Cam_Ca_on
	reaction_83: CamT_Ca1_D() + Ca() -> CamT_Ca2_CD() K_Cam_Ca_on
	reaction_84: CamT_Ca2_AB() -> CamT_Ca1_B() + Ca() K_CamT_Ca_A_off
	reaction_85: CamT_Ca2_AB() -> CamT_Ca1_A() + Ca() K_CamT_Ca_B_off
	reaction_86: CamT_Ca2_AC() -> CamT_Ca1_C() + Ca() K_CamT_Ca_A_off
	reaction_87: CamT_Ca2_AC() -> CamT_Ca1_A() + Ca() K_CamT_Ca_C_off
	reaction_88: CamT_Ca2_AD() -> CamT_Ca1_D() + Ca() K_CamT_Ca_A_off
	reaction_89: CamT_Ca2_AD() -> CamT_Ca1_A() + Ca() K_CamT_Ca_D_off
	reaction_90: CamT_Ca2_BC() -> CamT_Ca1_C() + Ca() K_CamT_Ca_B_off
	reaction_91: CamT_Ca2_BC() -> CamT_Ca1_B() + Ca() K_CamT_Ca_C_off
	reaction_92: CamT_Ca2_BD() -> CamT_Ca1_D() + Ca() K_CamT_Ca_B_off
	reaction_93: CamT_Ca2_BD() -> CamT_Ca1_B() + Ca() K_CamT_Ca_D_off
	reaction_94: CamT_Ca2_CD() -> CamT_Ca1_D() + Ca() K_CamT_Ca_C_off
	reaction_95: CamT_Ca2_CD() -> CamT_Ca1_C() + Ca() K_CamT_Ca_D_off
	reaction_96: CamT_Ca2_AB() + Ca() -> CamT_Ca3_ABC() K_Cam_Ca_on
	reaction_97: CamT_Ca2_AB() + Ca() -> CamT_Ca3_ABD() K_Cam_Ca_on
	reaction_98: CamT_Ca2_AC() + Ca() -> CamT_Ca3_ABC() K_Cam_Ca_on
	reaction_99: CamT_Ca2_AC() + Ca() -> CamT_Ca3_ACD() K_Cam_Ca_on
	reaction_100: CamT_Ca2_AD() + Ca() -> CamT_Ca3_ABD() K_Cam_Ca_on
	reaction_101: CamT_Ca2_AD() + Ca() -> CamT_Ca3_ACD() K_Cam_Ca_on
	reaction_102: CamT_Ca2_BC() + Ca() -> CamT_Ca3_ABC() K_Cam_Ca_on
	reaction_103: CamT_Ca2_BC() + Ca() -> CamT_Ca3_BCD() K_Cam_Ca_on
	reaction_104: CamT_Ca2_BD() + Ca() -> CamT_Ca3_ABD() K_Cam_Ca_on
	reaction_105: CamT_Ca2_BD() + Ca() -> CamT_Ca3_BCD() K_Cam_Ca_on
	reaction_106: CamT_Ca2_CD() + Ca() -> CamT_Ca3_ACD() K_Cam_Ca_on
	reaction_107: CamT_Ca2_CD() + Ca() -> CamT_Ca3_BCD() K_Cam_Ca_on
	reaction_108: CamT_Ca3_ABC() -> CamT_Ca2_AC() + Ca() K_CamT_Ca_B_off
	reaction_109: CamT_Ca3_ABC() -> CamT_Ca2_BC() + Ca() K_CamT_Ca_A_off
	reaction_110: CamT_Ca3_ABD() -> CamT_Ca2_AB() + Ca() K_CamT_Ca_D_off
	reaction_111: CamT_Ca3_ABD() -> CamT_Ca2_AD() + Ca() K_CamT_Ca_B_off
	reaction_112: CamT_Ca3_ABD() -> CamT_Ca2_BD() + Ca() K_CamT_Ca_A_off
	reaction_113: CamT_Ca3_ACD() -> CamT_Ca2_AC() + Ca() K_CamT_Ca_D_off
	reaction_114: CamT_Ca3_ACD() -> CamT_Ca2_AD() + Ca() K_CamT_Ca_C_off
	reaction_115: CamT_Ca3_ACD() -> CamT_Ca2_CD() + Ca() K_CamT_Ca_A_off
	reaction_116: CamT_Ca3_BCD() -> CamT_Ca2_BC() + Ca() K_CamT_Ca_D_off
	reaction_117: CamT_Ca3_BCD() -> CamT_Ca2_BD() + Ca() K_CamT_Ca_C_off
	reaction_118: CamT_Ca3_BCD() -> CamT_Ca2_CD() + Ca() K_CamT_Ca_B_off
	reaction_119: CamT_Ca3_ABC() + Ca() -> CamT_Ca4_ABCD() K_Cam_Ca_on
	reaction_120: CamT_Ca3_ABD() + Ca() -> CamT_Ca4_ABCD() K_Cam_Ca_on
	reaction_121: CamT_Ca3_ACD() + Ca() -> CamT_Ca4_ABCD() K_Cam_Ca_on
	reaction_122: CamT_Ca3_BCD() + Ca() -> CamT_Ca4_ABCD() K_Cam_Ca_on
	reaction_123: CamT_Ca4_ABCD() -> CamT_Ca3_ABC() + Ca() K_CamT_Ca_D_off
	reaction_124: CamT_Ca4_ABCD() -> CamT_Ca3_ABD() + Ca() K_CamT_Ca_C_off
	reaction_125: CamT_Ca4_ABCD() -> CamT_Ca3_ACD() + Ca() K_CamT_Ca_B_off
	reaction_126: CamT_Ca4_ABCD() -> CamT_Ca3_BCD() + Ca() K_CamT_Ca_A_off
	reaction_127: CamR() -> CamT() K_CamR_T
	reaction_128: CamT() -> CamR() K_CamT_R
	reaction_129: CamR_Ca1_A() -> CamT_Ca1_A() K_CamR_to_T_Ca1
	reaction_130: CamR_Ca1_B() -> CamT_Ca1_B() K_CamR_to_T_Ca1
	reaction_131: CamR_Ca1_C() -> CamT_Ca1_C() K_CamR_to_T_Ca1
	reaction_132: CamR_Ca1_D() -> CamT_Ca1_D() K_CamR_to_T_Ca1
	reaction_133: CamT_Ca1_A() -> CamR_Ca1_A() K_CamT_to_R_Ca1
	reaction_134: CamT_Ca1_B() -> CamR_Ca1_B() K_CamT_to_R_Ca1
	reaction_135: CamT_Ca1_C() -> CamR_Ca1_C() K_CamT_to_R_Ca1
	reaction_136: CamT_Ca1_D() -> CamR_Ca1_D() K_CamT_to_R_Ca1
	reaction_137: CamR_Ca2_AB() -> CamT_Ca2_AB() K_CamR_to_T_Ca2
	reaction_138: CamR_Ca2_AC() -> CamT_Ca2_AC() K_CamR_to_T_Ca2
	reaction_139: CamR_Ca2_AD() -> CamT_Ca2_AD() K_CamR_to_T_Ca2
	reaction_140: CamR_Ca2_BC() -> CamT_Ca2_BC() K_CamR_to_T_Ca2
	reaction_141: CamR_Ca2_BD() -> CamT_Ca2_BD() K_CamR_to_T_Ca2
	reaction_142: CamR_Ca2_CD() -> CamT_Ca2_CD() K_CamR_to_T_Ca2
	reaction_143: CamT_Ca2_AB() -> CamR_Ca2_AB() K_CamT_to_R_Ca2
	reaction_144: CamT_Ca2_AC() -> CamR_Ca2_AC() K_CamT_to_R_Ca2
	reaction_145: CamT_Ca2_AD() -> CamR_Ca2_AD() K_CamT_to_R_Ca2
	reaction_146: CamT_Ca2_BC() -> CamR_Ca2_BC() K_CamT_to_R_Ca2
	reaction_147: CamT_Ca2_BD() -> CamR_Ca2_BD() K_CamT_to_R_Ca2
	reaction_148: CamT_Ca2_CD() -> CamR_Ca2_CD() K_CamT_to_R_Ca2
	reaction_149: CamR_Ca3_ABC() -> CamT_Ca3_ABC() K_CamR_to_T_Ca3
	reaction_150: CamR_Ca3_ABD() -> CamT_Ca3_ABD() K_CamR_to_T_Ca3
	reaction_151: CamR_Ca3_ACD() -> CamT_Ca3_ACD() K_CamR_to_T_Ca3
	reaction_152: CamR_Ca3_BCD() -> CamT_Ca3_BCD() K_CamR_to_T_Ca3
	reaction_153: CamT_Ca3_ABC() -> CamR_Ca3_ABC() K_CamT_to_R_Ca3
	reaction_154: CamT_Ca3_ABD() -> CamR_Ca3_ABD() K_CamT_to_R_Ca3
	reaction_155: CamT_Ca3_ACD() -> CamR_Ca3_ACD() K_CamT_to_R_Ca3
	reaction_156: CamT_Ca3_BCD() -> CamR_Ca3_BCD() K_CamT_to_R_Ca3
	reaction_157: CamR_Ca4_ABCD() -> CamT_Ca4_ABCD() K_CamR_to_T_Ca4
	reaction_158: CamT_Ca4_ABCD() -> CamR_Ca4_ABCD() K_CamT_to_R_Ca4
	reaction_159: CamR() + CaMKII() -> CamR_CaMKII() K_CamR_CaMKII_p_on
	reaction_160: CamR_Ca1_A() + CaMKII() -> CamR_Ca1_A_CaMKII() K_CamR_CaMKII_p_on
	reaction_161: CamR_Ca1_B() + CaMKII() -> CamR_Ca1_B_CaMKII() K_CamR_CaMKII_p_on
	reaction_162: CamR_Ca1_C() + CaMKII() -> CamR_Ca1_C_CaMKII() K_CamR_CaMKII_p_on
	reaction_163: CamR_Ca1_D() + CaMKII() -> CamR_Ca1_D_CaMKII() K_CamR_CaMKII_p_on
	reaction_164: CamR_Ca2_AB() + CaMKII() -> CamR_Ca2_AB_CaMKII() K_CamR_CaMKII_p_on
	reaction_165: CamR_Ca2_AC() + CaMKII() -> CamR_Ca2_AC_CaMKII() K_CamR_CaMKII_p_on
	reaction_166: CamR_Ca2_AD() + CaMKII() -> CamR_Ca2_AD_CaMKII() K_CamR_CaMKII_p_on
	reaction_167: CamR_Ca2_BC() + CaMKII() -> CamR_Ca2_BC_CaMKII() K_CamR_CaMKII_p_on
	reaction_168: CamR_Ca2_BD() + CaMKII() -> CamR_Ca2_BD_CaMKII() K_CamR_CaMKII_p_on
	reaction_169: CamR_Ca2_CD() + CaMKII() -> CamR_Ca2_CD_CaMKII() K_CamR_CaMKII_p_on
	reaction_170: CamR_Ca3_ABC() + CaMKII() -> CamR_Ca3_ABC_CaMKII() K_CamR_CaMKII_p_on
	reaction_171: CamR_Ca3_ABD() + CaMKII() -> CamR_Ca3_ABD_CaMKII() K_CamR_CaMKII_p_on
	reaction_172: CamR_Ca3_ACD() + CaMKII() -> CamR_Ca3_ACD_CaMKII() K_CamR_CaMKII_p_on
	reaction_173: CamR_Ca3_BCD() + CaMKII() -> CamR_Ca3_BCD_CaMKII() K_CamR_CaMKII_p_on
	reaction_174: CamR_Ca4_ABCD() + CaMKII() -> CamR_Ca4_ABCD_CaMKII() K_CamR_CaMKII_p_on
	reaction_175: CamR_CaMKII() -> CamR() + CaMKII() K_CamR_CaMKII_off
	reaction_176: CamR_Ca1_A_CaMKII() -> CamR_Ca1_A() + CaMKII() K_CamR_CaMKII_off
	reaction_177: CamR_Ca1_B_CaMKII() -> CamR_Ca1_B() + CaMKII() K_CamR_CaMKII_off
	reaction_178: CamR_Ca1_C_CaMKII() -> CamR_Ca1_C() + CaMKII() K_CamR_CaMKII_off
	reaction_179: CamR_Ca1_D_CaMKII() -> CamR_Ca1_D() + CaMKII() K_CamR_CaMKII_off
	reaction_180: CamR_Ca2_AB_CaMKII() -> CamR_Ca2_AB() + CaMKII() K_CamR_CaMKII_off
	reaction_181: CamR_Ca2_AC_CaMKII() -> CamR_Ca2_AC() + CaMKII() K_CamR_CaMKII_off
	reaction_182: CamR_Ca2_AD_CaMKII() -> CamR_Ca2_AD() + CaMKII() K_CamR_CaMKII_off
	reaction_183: CamR_Ca2_BC_CaMKII() -> CamR_Ca2_BC() + CaMKII() K_CamR_CaMKII_off
	reaction_184: CamR_Ca2_BD_CaMKII() -> CamR_Ca2_BD() + CaMKII() K_CamR_CaMKII_off
	reaction_185: CamR_Ca2_CD_CaMKII() -> CamR_Ca2_CD() + CaMKII() K_CamR_CaMKII_off
	reaction_186: CamR_Ca3_ABC_CaMKII() -> CamR_Ca3_ABC() + CaMKII() K_CamR_CaMKII_off
	reaction_187: CamR_Ca3_ABD_CaMKII() -> CamR_Ca3_ABD() + CaMKII() K_CamR_CaMKII_off
	reaction_188: CamR_Ca3_ACD_CaMKII() -> CamR_Ca3_ACD() + CaMKII() K_CamR_CaMKII_off
	reaction_189: CamR_Ca3_BCD_CaMKII() -> CamR_Ca3_BCD() + CaMKII() K_CamR_CaMKII_off
	reaction_190: CamR_Ca4_ABCD_CaMKII() -> CamR_Ca4_ABCD() + CaMKII() K_CamR_CaMKII_off
	reaction_191: CamR() + PP2B() -> CamR_PP2B() K_CamR_PP2B_on
	reaction_192: CamR_Ca1_A() + PP2B() -> CamR_Ca1_A_PP2B() K_CamR_PP2B_on
	reaction_193: CamR_Ca1_B() + PP2B() -> CamR_Ca1_B_PP2B() K_CamR_PP2B_on
	reaction_194: CamR_Ca1_C() + PP2B() -> CamR_Ca1_C_PP2B() K_CamR_PP2B_on
	reaction_195: CamR_Ca1_D() + PP2B() -> CamR_Ca1_D_PP2B() K_CamR_PP2B_on
	reaction_196: CamR_Ca2_AB() + PP2B() -> CamR_Ca2_AB_PP2B() K_CamR_PP2B_on
	reaction_198: CamR_Ca2_AD() + PP2B() -> CamR_Ca2_AD_PP2B() K_CamR_PP2B_on
	reaction_199: CamR_Ca2_BC() + PP2B() -> CamR_Ca2_BC_PP2B() K_CamR_PP2B_on
	reaction_200: CamR_Ca2_BD() + PP2B() -> CamR_Ca2_BD_PP2B() K_CamR_PP2B_on
	reaction_201: CamR_Ca2_CD() + PP2B() -> CamR_Ca2_CD_PP2B() K_CamR_PP2B_on
	reaction_202: CamR_Ca3_ABC() + PP2B() -> CamR_Ca3_ABC_PP2B() K_CamR_PP2B_on
	reaction_203: CamR_Ca3_ABD() + PP2B() -> CamR_Ca3_ABD_PP2B() K_CamR_PP2B_on
	reaction_204: CamR_Ca3_ACD() + PP2B() -> CamR_Ca3_ACD_PP2B() K_CamR_PP2B_on
	reaction_205: CamR_Ca3_BCD() + PP2B() -> CamR_Ca3_BCD_PP2B() K_CamR_PP2B_on
	reaction_206: CamR_Ca4_ABCD() + PP2B() -> CamR_Ca4_ABCD_PP2B() K_CamR_PP2B_on
	reaction_207: CamR_PP2B() -> CamR() + PP2B() K_CamR_PP2B_off
	reaction_208: CamR_Ca1_A_PP2B() -> CamR_Ca1_A() + PP2B() K_CamR_PP2B_off
	reaction_209: CamR_Ca1_B_PP2B() -> CamR_Ca1_B() + PP2B() K_CamR_PP2B_off
	reaction_210: CamR_Ca1_C_PP2B() -> CamR_Ca1_C() + PP2B() K_CamR_PP2B_off
	reaction_211: CamR_Ca1_D_PP2B() -> CamR_Ca1_D() + PP2B() K_CamR_PP2B_off
	reaction_212: CamR_Ca2_AB_PP2B() -> CamR_Ca2_AB() + PP2B() K_CamR_PP2B_off
	reaction_213: CamR_Ca2_AC_PP2B() -> CamR_Ca2_AC() + PP2B() K_CamR_PP2B_off
	reaction_214: CamR_Ca2_AD_PP2B() -> CamR_Ca2_AD() + PP2B() K_CamR_PP2B_off
	reaction_215: CamR_Ca2_BC_PP2B() -> CamR_Ca2_BC() + PP2B() K_CamR_PP2B_off
	reaction_216: CamR_Ca2_BD_PP2B() -> CamR_Ca2_BD() + PP2B() K_CamR_PP2B_off
	reaction_217: CamR_Ca2_CD_PP2B() -> CamR_Ca2_CD() + PP2B() K_CamR_PP2B_off
	reaction_218: CamR_Ca3_ABC_PP2B() -> CamR_Ca3_ABC() + PP2B() K_CamR_PP2B_off
	reaction_219: CamR_Ca3_ABD_PP2B() -> CamR_Ca3_ABD() + PP2B() K_CamR_PP2B_off
	reaction_220: CamR_Ca3_ACD_PP2B() -> CamR_Ca3_ACD() + PP2B() K_CamR_PP2B_off
	reaction_221: CamR_Ca3_BCD_PP2B() -> CamR_Ca3_BCD() + PP2B() K_CamR_PP2B_off
	reaction_222: CamR_Ca4_ABCD_PP2B() -> CamR_Ca4_ABCD() + PP2B() K_CamR_PP2B_off
	reaction_223: CamR_CaMKII() + Ca() -> CamR_Ca1_A_CaMKII() K_Cam_Ca_on
	reaction_224: CamR_CaMKII() + Ca() -> CamR_Ca1_B_CaMKII() K_Cam_Ca_on
	reaction_225: CamR_CaMKII() + Ca() -> CamR_Ca1_C_CaMKII() K_Cam_Ca_on
	reaction_226: CamR_CaMKII() + Ca() -> CamR_Ca1_D_CaMKII() K_Cam_Ca_on
	reaction_227: CamR_Ca1_A_CaMKII() -> CamR_CaMKII() + Ca() K_CamR_Ca_A_off
	reaction_228: CamR_Ca1_C_CaMKII() -> CamR_CaMKII() + Ca() K_CamR_Ca_C_off
	reaction_229: CamR_Ca1_D_CaMKII() -> CamR_CaMKII() + Ca() K_CamR_Ca_D_off
	reaction_230: CamR_Ca1_A_CaMKII() + Ca() -> CamR_Ca2_AB_CaMKII() K_Cam_Ca_on
	reaction_231: CamR_Ca1_A_CaMKII() + Ca() -> CamR_Ca2_AC_CaMKII() K_Cam_Ca_on
	reaction_232: CamR_Ca1_A_CaMKII() + Ca() -> CamR_Ca2_AD_CaMKII() K_Cam_Ca_on
	reaction_233: CamR_Ca1_B_CaMKII() + Ca() -> CamR_Ca2_AB_CaMKII() K_Cam_Ca_on
	reaction_234: CamR_Ca1_B_CaMKII() + Ca() -> CamR_Ca2_BC_CaMKII() K_Cam_Ca_on
	reaction_235: CamR_Ca1_B_CaMKII() + Ca() -> CamR_Ca2_BD_CaMKII() K_Cam_Ca_on
	reaction_236: CamR_Ca1_C_CaMKII() + Ca() -> CamR_Ca2_AC_CaMKII() K_Cam_Ca_on
	reaction_237: CamR_Ca1_C_CaMKII() + Ca() -> CamR_Ca2_BC_CaMKII() K_Cam_Ca_on
	reaction_238: CamR_Ca1_C_CaMKII() + Ca() -> CamR_Ca2_CD_CaMKII() K_Cam_Ca_on
	reaction_239: CamR_Ca1_D_CaMKII() + Ca() -> CamR_Ca2_AD_CaMKII() K_Cam_Ca_on
	reaction_240: CamR_Ca1_D_CaMKII() + Ca() -> CamR_Ca2_BD_CaMKII() K_Cam_Ca_on
	reaction_241: CamR_Ca1_D_CaMKII() + Ca() -> CamR_Ca2_CD_CaMKII() K_Cam_Ca_on
	reaction_242: CamR_Ca2_AB_CaMKII() -> CamR_Ca1_B_CaMKII() + Ca() K_CamR_Ca_A_off
	reaction_243: CamR_Ca2_AB_CaMKII() -> CamR_Ca1_A_CaMKII() + Ca() K_CamR_Ca_B_off
	reaction_244: CamR_Ca2_AC_CaMKII() -> CamR_Ca1_C_CaMKII() + Ca() K_CamR_Ca_A_off
	reaction_245: CamR_Ca2_AC_CaMKII() -> CamR_Ca1_A_CaMKII() + Ca() K_CamR_Ca_C_off
	reaction_246: CamR_Ca2_AD_CaMKII() -> CamR_Ca1_D_CaMKII() + Ca() K_CamR_Ca_A_off
	reaction_247: CamR_Ca2_AD_CaMKII() -> CamR_Ca1_A_CaMKII() + Ca() K_CamR_Ca_D_off
	reaction_248: CamR_Ca2_BC_CaMKII() -> CamR_Ca1_C_CaMKII() + Ca() K_CamR_Ca_B_off
	reaction_249: CamR_Ca2_BC_CaMKII() -> CamR_Ca1_B_CaMKII() + Ca() K_CamR_Ca_C_off
	reaction_250: CamR_Ca2_BD_CaMKII() -> CamR_Ca1_D_CaMKII() + Ca() K_CamR_Ca_B_off
	reaction_251: CamR_Ca2_BD_CaMKII() -> CamR_Ca1_B_CaMKII() + Ca() K_CamR_Ca_D_off
	reaction_252: CamR_Ca2_CD_CaMKII() -> CamR_Ca1_D_CaMKII() + Ca() K_CamR_Ca_C_off
	reaction_253: CamR_Ca2_CD_CaMKII() -> CamR_Ca1_C_CaMKII() + Ca() K_CamR_Ca_D_off
	reaction_254: CamR_Ca2_AB_CaMKII() + Ca() -> CamR_Ca3_ABC_CaMKII() K_Cam_Ca_on
	reaction_255: CamR_Ca2_AB_CaMKII() + Ca() -> CamR_Ca3_ABD_CaMKII() K_Cam_Ca_on
	reaction_256: CamR_Ca2_AC_CaMKII() + Ca() -> CamR_Ca3_ABC_CaMKII() K_Cam_Ca_on
	reaction_257: CamR_Ca2_AC_CaMKII() + Ca() -> CamR_Ca3_ACD_CaMKII() K_Cam_Ca_on
	reaction_258: CamR_Ca2_AD_CaMKII() + Ca() -> CamR_Ca3_ABD_CaMKII() K_Cam_Ca_on
	reaction_259: CamR_Ca2_AD_CaMKII() + Ca() -> CamR_Ca3_ACD_CaMKII() K_Cam_Ca_on
	reaction_260: CamR_Ca2_BC_CaMKII() + Ca() -> CamR_Ca3_ABC_CaMKII() K_Cam_Ca_on
	reaction_261: CamR_Ca2_BC_CaMKII() + Ca() -> CamR_Ca3_BCD_CaMKII() K_Cam_Ca_on
	reaction_262: CamR_Ca2_BD_CaMKII() + Ca() -> CamR_Ca3_ABD_CaMKII() K_Cam_Ca_on
	reaction_263: CamR_Ca2_BD_CaMKII() + Ca() -> CamR_Ca3_BCD_CaMKII() K_Cam_Ca_on
	reaction_264: CamR_Ca2_CD_CaMKII() + Ca() -> CamR_Ca3_ACD_CaMKII() K_Cam_Ca_on
	reaction_265: CamR_Ca2_CD_CaMKII() + Ca() -> CamR_Ca3_BCD_CaMKII() K_Cam_Ca_on
	reaction_266: CamR_Ca3_ABC_CaMKII() -> CamR_Ca2_AB_CaMKII() + Ca() K_CamR_Ca_C_off
	reaction_267: CamR_Ca3_ABC_CaMKII() -> CamR_Ca2_AC_CaMKII() + Ca() K_CamR_Ca_B_off
	reaction_268: CamR_Ca3_ABC_CaMKII() -> CamR_Ca2_BC_CaMKII() + Ca() K_CamR_Ca_A_off
	reaction_269: CamR_Ca3_ABD_CaMKII() -> CamR_Ca2_AB_CaMKII() + Ca() K_CamR_Ca_D_off
	reaction_270: CamR_Ca3_ABD_CaMKII() -> CamR_Ca2_AD_CaMKII() + Ca() K_CamR_Ca_B_off
	reaction_271: CamR_Ca3_ABD_CaMKII() -> CamR_Ca2_BD_CaMKII() + Ca() K_CamR_Ca_A_off
	reaction_272: CamR_Ca3_ACD_CaMKII() -> CamR_Ca2_AC_CaMKII() + Ca() K_CamR_Ca_D_off
	reaction_273: CamR_Ca3_ACD_CaMKII() -> CamR_Ca2_AD_CaMKII() + Ca() K_CamR_Ca_C_off
	reaction_274: CamR_Ca3_ACD_CaMKII() -> CamR_Ca2_CD_CaMKII() + Ca() K_CamR_Ca_A_off
	reaction_275: CamR_Ca3_BCD_CaMKII() -> CamR_Ca2_BC_CaMKII() + Ca() K_CamR_Ca_D_off
	reaction_276: CamR_Ca3_BCD_CaMKII() -> CamR_Ca2_BD_CaMKII() + Ca() K_CamR_Ca_C_off
	reaction_277: CamR_Ca3_BCD_CaMKII() -> CamR_Ca2_CD_CaMKII() + Ca() K_CamR_Ca_B_off
	reaction_278: CamR_Ca3_BCD_CaMKII() + Ca() -> CamR_Ca4_ABCD_CaMKII() K_Cam_Ca_on
	reaction_279: CamR_Ca3_ACD_CaMKII() + Ca() -> CamR_Ca4_ABCD_CaMKII() K_Cam_Ca_on
	reaction_280: CamR_Ca3_ABD_CaMKII() + Ca() -> CamR_Ca4_ABCD_CaMKII() K_Cam_Ca_on
	reaction_281: CamR_Ca3_ABC_CaMKII() + Ca() -> CamR_Ca4_ABCD_CaMKII() K_Cam_Ca_on
	reaction_282: CamR_Ca4_ABCD_CaMKII() -> CamR_Ca3_BCD_CaMKII() + Ca() K_CamR_Ca_A_off
	reaction_283: CamR_Ca4_ABCD_CaMKII() -> CamR_Ca3_ACD_CaMKII() + Ca() K_CamR_Ca_B_off
	reaction_284: CamR_Ca4_ABCD_CaMKII() -> CamR_Ca3_ABD_CaMKII() + Ca() K_CamR_Ca_C_off
	reaction_285: CamR_Ca4_ABCD_CaMKII() -> CamR_Ca3_ABC_CaMKII() + Ca() K_CamR_Ca_D_off
	reaction_286: CamR_PP2B() + Ca() -> CamR_Ca1_A_PP2B() K_Cam_Ca_on
	reaction_287: CamR_PP2B() + Ca() -> CamR_Ca1_B_PP2B() K_Cam_Ca_on
	reaction_288: CamR_PP2B() + Ca() -> CamR_Ca1_C_PP2B() K_Cam_Ca_on
	reaction_289: CamR_PP2B() + Ca() -> CamR_Ca1_D_PP2B() K_Cam_Ca_on
	reaction_290: CamR_Ca1_A_PP2B() -> CamR_PP2B() + Ca() K_CamR_Ca_A_off
	reaction_291: CamR_Ca1_B_PP2B() -> CamR_PP2B() + Ca() K_CamR_Ca_B_off
	reaction_292: CamR_Ca1_C_PP2B() -> CamR_PP2B() + Ca() K_CamR_Ca_C_off
	reaction_293: CamR_Ca1_D_PP2B() -> CamR_PP2B() + Ca() K_CamR_Ca_D_off
	reaction_294: CamR_Ca1_A_PP2B() + Ca() -> CamR_Ca2_AB_PP2B() K_Cam_Ca_on
	reaction_295: CamR_Ca1_A_PP2B() + Ca() -> CamR_Ca2_AC_PP2B() K_Cam_Ca_on
	reaction_296: CamR_Ca1_A_PP2B() + Ca() -> CamR_Ca2_AD_PP2B() K_Cam_Ca_on
	reaction_297: CamR_Ca1_B_PP2B() + Ca() -> CamR_Ca2_AB_PP2B() K_Cam_Ca_on
	reaction_298: CamR_Ca1_B_PP2B() + Ca() -> CamR_Ca2_BC_PP2B() K_Cam_Ca_on
	reaction_299: CamR_Ca1_B_PP2B() + Ca() -> CamR_Ca2_BD_PP2B() K_Cam_Ca_on
	reaction_300: CamR_Ca1_C_PP2B() + Ca() -> CamR_Ca2_AC_PP2B() K_Cam_Ca_on
	reaction_301: CamR_Ca1_C_PP2B() + Ca() -> CamR_Ca2_BC_PP2B() K_Cam_Ca_on
	reaction_302: CamR_Ca1_C_PP2B() + Ca() -> CamR_Ca2_CD_PP2B() K_Cam_Ca_on
	reaction_303: CamR_Ca1_D_PP2B() + Ca() -> CamR_Ca2_AD_PP2B() K_Cam_Ca_on
	reaction_304: CamR_Ca1_D_PP2B() + Ca() -> CamR_Ca2_BD_PP2B() K_Cam_Ca_on
	reaction_305: CamR_Ca1_D_PP2B() + Ca() -> CamR_Ca2_CD_PP2B() K_Cam_Ca_on
	reaction_306: CamR_Ca2_AB_PP2B() -> CamR_Ca1_B_PP2B() + Ca() K_CamR_Ca_A_off
	reaction_307: CamR_Ca2_AB_PP2B() -> CamR_Ca1_A_PP2B() + Ca() K_CamR_Ca_B_off
	reaction_308: CamR_Ca2_AC_PP2B() -> CamR_Ca1_C_PP2B() + Ca() K_CamR_Ca_A_off
	reaction_309: CamR_Ca2_AC_PP2B() -> CamR_Ca1_A_PP2B() + Ca() K_CamR_Ca_C_off
	reaction_310: CamR_Ca2_AD_PP2B() -> CamR_Ca1_D_PP2B() + Ca() K_CamR_Ca_A_off
	reaction_311: CamR_Ca2_AD_PP2B() -> CamR_Ca1_A_PP2B() + Ca() K_CamR_Ca_D_off
	reaction_312: CamR_Ca2_BC_PP2B() -> CamR_Ca1_C_PP2B() + Ca() K_CamR_Ca_B_off
	reaction_313: CamR_Ca2_BC_PP2B() -> CamR_Ca1_B_PP2B() + Ca() K_CamR_Ca_C_off
	reaction_314: CamR_Ca2_BD_PP2B() -> CamR_Ca1_D_PP2B() + Ca() K_CamR_Ca_B_off
	reaction_315: CamR_Ca2_BD_PP2B() -> CamR_Ca1_B_PP2B() + Ca() K_CamR_Ca_D_off
	reaction_316: CamR_Ca2_CD_PP2B() -> CamR_Ca1_D_PP2B() + Ca() K_CamR_Ca_C_off
	reaction_317: CamR_Ca2_CD_PP2B() -> CamR_Ca1_C_PP2B() + Ca() K_CamR_Ca_D_off
	reaction_318: CamR_Ca2_AB_PP2B() + Ca() -> CamR_Ca3_ABC_PP2B() K_Cam_Ca_on
	reaction_319: CamR_Ca2_AB_PP2B() + Ca() -> CamR_Ca3_ABD_PP2B() K_Cam_Ca_on
	reaction_320: CamR_Ca2_AC_PP2B() + Ca() -> CamR_Ca3_ABC_PP2B() K_Cam_Ca_on
	reaction_321: CamR_Ca2_AC_PP2B() + Ca() -> CamR_Ca3_ACD_PP2B() K_Cam_Ca_on
	reaction_322: CamR_Ca2_AD_PP2B() + Ca() -> CamR_Ca3_ABD_PP2B() K_Cam_Ca_on
	reaction_323: CamR_Ca2_AD_PP2B() + Ca() -> CamR_Ca3_ACD_PP2B() K_Cam_Ca_on
	reaction_324: CamR_Ca2_BC_PP2B() + Ca() -> CamR_Ca3_ABC_PP2B() K_Cam_Ca_on
	reaction_325: CamR_Ca2_BC_PP2B() + Ca() -> CamR_Ca3_BCD_PP2B() K_Cam_Ca_on
	reaction_326: CamR_Ca2_BD_PP2B() + Ca() -> CamR_Ca3_ABD_PP2B() K_Cam_Ca_on
	reaction_327: CamR_Ca2_BD_PP2B() + Ca() -> CamR_Ca3_BCD_PP2B() K_Cam_Ca_on
	reaction_328: CamR_Ca2_CD_PP2B() + Ca() -> CamR_Ca3_ACD_PP2B() K_Cam_Ca_on
	reaction_329: CamR_Ca2_CD_PP2B() + Ca() -> CamR_Ca3_BCD_PP2B() K_Cam_Ca_on
	reaction_330: CamR_Ca3_ABC_PP2B() -> CamR_Ca2_BC_PP2B() + Ca() K_CamR_Ca_A_off
	reaction_331: CamR_Ca3_ABC_PP2B() -> CamR_Ca2_AC_PP2B() + Ca() K_CamR_Ca_B_off
	reaction_332: CamR_Ca3_ABC_PP2B() -> CamR_Ca2_AB_PP2B() + Ca() K_CamR_Ca_C_off
	reaction_333: CamR_Ca3_ABD_PP2B() -> CamR_Ca2_BD_PP2B() + Ca() K_CamR_Ca_A_off
	reaction_334: CamR_Ca3_ABD_PP2B() -> CamR_Ca2_AD_PP2B() + Ca() K_CamR_Ca_B_off
	reaction_335: CamR_Ca3_ABD_PP2B() -> CamR_Ca2_AB_PP2B() + Ca() K_CamR_Ca_D_off
	reaction_336: CamR_Ca3_ACD_PP2B() -> CamR_Ca2_CD_PP2B() + Ca() K_CamR_Ca_A_off
	reaction_337: CamR_Ca3_ACD_PP2B() -> CamR_Ca2_AD_PP2B() + Ca() K_CamR_Ca_C_off
	reaction_338: CamR_Ca3_ACD_PP2B() -> CamR_Ca2_AC_PP2B() + Ca() K_CamR_Ca_D_off
	reaction_339: CamR_Ca3_BCD_PP2B() -> CamR_Ca2_CD_PP2B() + Ca() K_CamR_Ca_B_off
	reaction_340: CamR_Ca3_BCD_PP2B() -> CamR_Ca2_BD_PP2B() + Ca() K_CamR_Ca_C_off
	reaction_341: CamR_Ca3_BCD_PP2B() -> CamR_Ca2_BC_PP2B() + Ca() K_CamR_Ca_D_off
	reaction_342: CamR_Ca3_ABC_PP2B() + Ca() -> CamR_Ca4_ABCD_PP2B() K_Cam_Ca_on
	reaction_343: CamR_Ca3_ABD_PP2B() + Ca() -> CamR_Ca4_ABCD_PP2B() K_Cam_Ca_on
	reaction_344: CamR_Ca3_ACD_PP2B() + Ca() -> CamR_Ca4_ABCD_PP2B() K_Cam_Ca_on
	reaction_345: CamR_Ca3_BCD_PP2B() + Ca() -> CamR_Ca4_ABCD_PP2B() K_Cam_Ca_on
	reaction_346: CamR_Ca4_ABCD_PP2B() -> CamR_Ca3_BCD_PP2B() + Ca() K_CamR_Ca_A_off
	reaction_347: CamR_Ca4_ABCD_PP2B() -> CamR_Ca3_ACD_PP2B() + Ca() K_CamR_Ca_B_off
	reaction_348: CamR_Ca4_ABCD_PP2B() -> CamR_Ca3_ABD_PP2B() + Ca() K_CamR_Ca_C_off
	reaction_349: CamR_Ca4_ABCD_PP2B() -> CamR_Ca3_ABC_PP2B() + Ca() K_CamR_Ca_D_off
	reaction_350: CamR_Ca1_B_CaMKII() -> CamR_CaMKII() + Ca() K_CamR_Ca_B_off
	reaction_351: CamT_Ca3_ABC() -> CamT_Ca2_AB() + Ca() K_CamT_Ca_C_off
	reaction_352: CamR_CaMKII() -> CamR_CaMKIIp() K_CaMKII_autoPhosphorylation
	reaction_353: CamR_Ca1_A_CaMKII() -> CamR_Ca1_A_CaMKIIp() K_CaMKII_autoPhosphorylation
	reaction_354: CamR_Ca1_B_CaMKII() -> CamR_Ca1_B_CaMKIIp() K_CaMKII_autoPhosphorylation
	reaction_355: CamR_Ca1_C_CaMKII() -> CamR_Ca1_C_CaMKIIp() K_CaMKII_autoPhosphorylation
	reaction_356: CamR_Ca1_D_CaMKII() -> CamR_Ca1_D_CaMKIIp() K_CaMKII_autoPhosphorylation
	reaction_357: CamR_Ca2_AB_CaMKII() -> CamR_Ca2_AB_CaMKIIp() K_CaMKII_autoPhosphorylation
	reaction_358: CamR_Ca2_AC_CaMKII() -> CamR_Ca2_AC_CaMKIIp() K_CaMKII_autoPhosphorylation
	reaction_359: CamR_Ca2_AD_CaMKII() -> CamR_Ca2_AD_CaMKIIp() K_CaMKII_autoPhosphorylation
	reaction_360: CamR_Ca2_BC_CaMKII() -> CamR_Ca2_BC_CaMKIIp() K_CaMKII_autoPhosphorylation
	reaction_361: CamR_Ca2_BD_CaMKII() -> CamR_Ca2_BD_CaMKIIp() K_CaMKII_autoPhosphorylation
	reaction_362: CamR_Ca2_CD_CaMKII() -> CamR_Ca2_CD_CaMKIIp() K_CaMKII_autoPhosphorylation
	reaction_363: CamR_Ca3_ABC_CaMKII() -> CamR_Ca3_ABC_CaMKIIp() K_CaMKII_autoPhosphorylation
	reaction_364: CamR_Ca3_ABD_CaMKII() -> CamR_Ca3_ABD_CaMKIIp() K_CaMKII_autoPhosphorylation
	reaction_365: CamR_Ca3_ACD_CaMKII() -> CamR_Ca3_ACD_CaMKIIp() K_CaMKII_autoPhosphorylation
	reaction_366: CamR_Ca3_BCD_CaMKII() -> CamR_Ca3_BCD_CaMKIIp() K_CaMKII_autoPhosphorylation
	reaction_367: CamR_Ca4_ABCD_CaMKII() -> CamR_Ca4_ABCD_CaMKIIp() K_CaMKII_autoPhosphorylation
	reaction_368: CamR() + CaMKIIp() -> CamR_CaMKIIp() K_CamR_CaMKII_p_on
	reaction_369: CamR_CaMKIIp() -> CamR() + CaMKIIp() K_CamR_CaMKIIp_off
	reaction_370: CamR_Ca1_A() + CaMKIIp() -> CamR_Ca1_A_CaMKIIp() K_CamR_CaMKII_p_on
	reaction_371: CamR_Ca1_A_CaMKIIp() -> CamR_Ca1_A() + CaMKIIp() K_CamR_CaMKIIp_off
	reaction_372: CamR_Ca1_B() + CaMKIIp() -> CamR_Ca1_B_CaMKIIp() K_CamR_CaMKII_p_on
	reaction_373: CamR_Ca1_B_CaMKIIp() -> CamR_Ca1_B() + CaMKIIp() K_CamR_CaMKIIp_off
	reaction_374: CamR_Ca1_C() + CaMKIIp() -> CamR_Ca1_C_CaMKIIp() K_CamR_CaMKII_p_on
	reaction_375: CamR_Ca1_C_CaMKIIp() -> CamR_Ca1_C() + CaMKIIp() K_CamR_CaMKIIp_off
	reaction_376: CamR_Ca1_D() + CaMKIIp() -> CamR_Ca1_D_CaMKIIp() K_CamR_CaMKII_p_on
	reaction_377: CamR_Ca1_D_CaMKIIp() -> CamR_Ca1_D() + CaMKIIp() K_CamR_CaMKIIp_off
	reaction_378: CamR_Ca2_AB() + CaMKIIp() -> CamR_Ca2_AB_CaMKIIp() K_CamR_CaMKII_p_on
	reaction_379: CamR_Ca2_AB_CaMKIIp() -> CamR_Ca2_AB() + CaMKIIp() K_CamR_CaMKIIp_off
	reaction_380: CamR_Ca2_AC() + CaMKIIp() -> CamR_Ca2_AC_CaMKIIp() K_CamR_CaMKII_p_on
	reaction_381: CamR_Ca2_AC_CaMKIIp() -> CamR_Ca2_AC() + CaMKIIp() K_CamR_CaMKIIp_off
	reaction_382: CamR_Ca2_AD() + CaMKIIp() -> CamR_Ca2_AD_CaMKIIp() K_CamR_CaMKII_p_on
	reaction_383: CamR_Ca2_AD_CaMKIIp() -> CamR_Ca2_AD() + CaMKIIp() K_CamR_CaMKIIp_off
	reaction_384: CamR_Ca2_BC() + CaMKIIp() -> CamR_Ca2_BC_CaMKIIp() K_CamR_CaMKII_p_on
	reaction_385: CamR_Ca2_BC_CaMKIIp() -> CamR_Ca2_BC() + CaMKIIp() K_CamR_CaMKIIp_off
	reaction_386: CamR_Ca2_BD() + CaMKIIp() -> CamR_Ca2_BD_CaMKIIp() K_CamR_CaMKII_p_on
	reaction_387: CamR_Ca2_BD_CaMKIIp() -> CamR_Ca2_BD() + CaMKIIp() K_CamR_CaMKIIp_off
	reaction_388: CamR_Ca2_CD() + CaMKIIp() -> CamR_Ca2_CD_CaMKIIp() K_CamR_CaMKII_p_on
	reaction_389: CamR_Ca2_CD_CaMKIIp() -> CamR_Ca2_CD() + CaMKIIp() K_CamR_CaMKIIp_off
	reaction_390: CamR_Ca3_ABC() + CaMKIIp() -> CamR_Ca3_ABC_CaMKIIp() K_CamR_CaMKII_p_on
	reaction_391: CamR_Ca3_ABC_CaMKIIp() -> CamR_Ca3_ABC() + CaMKIIp() K_CamR_CaMKIIp_off
	reaction_392: CamR_Ca3_ABD() + CaMKIIp() -> CamR_Ca3_ABD_CaMKIIp() K_CamR_CaMKII_p_on
	reaction_393: CamR_Ca3_ABD_CaMKIIp() -> CamR_Ca3_ABD() + CaMKIIp() K_CamR_CaMKIIp_off
	reaction_394: CamR_Ca3_ACD() + CaMKIIp() -> CamR_Ca3_ACD_CaMKIIp() K_CamR_CaMKII_p_on
	reaction_395: CamR_Ca3_ACD_CaMKIIp() -> CamR_Ca3_ACD() + CaMKIIp() K_CamR_CaMKIIp_off
	reaction_396: CamR_Ca3_BCD() + CaMKIIp() -> CamR_Ca3_BCD_CaMKIIp() K_CamR_CaMKII_p_on
	reaction_397: CamR_Ca3_BCD_CaMKIIp() -> CamR_Ca3_BCD() + CaMKIIp() K_CamR_CaMKIIp_off
	reaction_398: CamR_Ca4_ABCD() + CaMKIIp() -> CamR_Ca4_ABCD_CaMKIIp() K_CamR_CaMKII_p_on
	reaction_399: CamR_Ca4_ABCD_CaMKIIp() -> CamR_Ca4_ABCD() + CaMKIIp() K_CamR_CaMKIIp_off
	reaction_504: CamR_CaMKIIp() + Ca() -> CamR_Ca1_A_CaMKIIp() K_Cam_Ca_on
	reaction_505: CamR_CaMKIIp() + Ca() -> CamR_Ca1_B_CaMKIIp() K_Cam_Ca_on
	reaction_506: CamR_CaMKIIp() + Ca() -> CamR_Ca1_C_CaMKIIp() K_Cam_Ca_on
	reaction_507: CamR_CaMKIIp() + Ca() -> CamR_Ca1_D_CaMKIIp() K_Cam_Ca_on
	reaction_508: CamR_Ca1_A_CaMKIIp() -> CamR_CaMKIIp() + Ca() K_CamR_Ca_A_off
	reaction_567: CamR_Ca1_B_CaMKIIp() -> CamR_CaMKIIp() + Ca() K_CamR_Ca_B_off
	reaction_509: CamR_Ca1_C_CaMKIIp() -> CamR_CaMKIIp() + Ca() K_CamR_Ca_C_off
	reaction_510: CamR_Ca1_D_CaMKIIp() -> CamR_CaMKIIp() + Ca() K_CamR_Ca_D_off
	reaction_511: CamR_Ca1_A_CaMKIIp() + Ca() -> CamR_Ca2_AB_CaMKIIp() K_Cam_Ca_on
	reaction_512: CamR_Ca1_A_CaMKIIp() + Ca() -> CamR_Ca2_AC_CaMKIIp() K_Cam_Ca_on
	reaction_513: CamR_Ca1_A_CaMKIIp() + Ca() -> CamR_Ca2_AD_CaMKIIp() K_Cam_Ca_on
	reaction_514: CamR_Ca1_B_CaMKIIp() + Ca() -> CamR_Ca2_AB_CaMKIIp() K_Cam_Ca_on
	reaction_515: CamR_Ca1_B_CaMKIIp() + Ca() -> CamR_Ca2_BC_CaMKIIp() K_Cam_Ca_on
	reaction_516: CamR_Ca1_B_CaMKIIp() + Ca() -> CamR_Ca2_BD_CaMKIIp() K_Cam_Ca_on
	reaction_517: CamR_Ca1_C_CaMKIIp() + Ca() -> CamR_Ca2_AC_CaMKIIp() K_Cam_Ca_on
	reaction_518: CamR_Ca1_C_CaMKIIp() + Ca() -> CamR_Ca2_BC_CaMKIIp() K_Cam_Ca_on
	reaction_519: CamR_Ca1_C_CaMKIIp() + Ca() -> CamR_Ca2_CD_CaMKIIp() K_Cam_Ca_on
	reaction_520: CamR_Ca1_D_CaMKIIp() + Ca() -> CamR_Ca2_AD_CaMKIIp() K_Cam_Ca_on
	reaction_521: CamR_Ca1_D_CaMKIIp() + Ca() -> CamR_Ca2_BD_CaMKIIp() K_Cam_Ca_on
	reaction_522: CamR_Ca1_D_CaMKIIp() + Ca() -> CamR_Ca2_CD_CaMKIIp() K_Cam_Ca_on
	reaction_523: CamR_Ca2_AB_CaMKIIp() -> CamR_Ca1_B_CaMKIIp() + Ca() K_CamR_Ca_A_off
	reaction_524: CamR_Ca2_AB_CaMKIIp() -> CamR_Ca1_A_CaMKIIp() + Ca() K_CamR_Ca_B_off
	reaction_525: CamR_Ca2_AC_CaMKIIp() -> CamR_Ca1_C_CaMKIIp() + Ca() K_CamR_Ca_A_off
	reaction_526: CamR_Ca2_AC_CaMKIIp() -> CamR_Ca1_A_CaMKIIp() + Ca() K_CamR_Ca_C_off
	reaction_527: CamR_Ca2_AD_CaMKIIp() -> CamR_Ca1_D_CaMKIIp() + Ca() K_CamR_Ca_A_off
	reaction_528: CamR_Ca2_AD_CaMKIIp() -> CamR_Ca1_A_CaMKIIp() + Ca() K_CamR_Ca_D_off
	reaction_529: CamR_Ca2_BC_CaMKIIp() -> CamR_Ca1_C_CaMKIIp() + Ca() K_CamR_Ca_B_off
	reaction_530: CamR_Ca2_BC_CaMKIIp() -> CamR_Ca1_B_CaMKIIp() + Ca() K_CamR_Ca_C_off
	reaction_531: CamR_Ca2_BD_CaMKIIp() -> CamR_Ca1_D_CaMKIIp() + Ca() K_CamR_Ca_B_off
	reaction_532: CamR_Ca2_BD_CaMKIIp() -> CamR_Ca1_B_CaMKIIp() + Ca() K_CamR_Ca_D_off
	reaction_533: CamR_Ca2_CD_CaMKIIp() -> CamR_Ca1_D_CaMKIIp() + Ca() K_CamR_Ca_C_off
	reaction_534: CamR_Ca2_CD_CaMKIIp() -> CamR_Ca1_C_CaMKIIp() + Ca() K_CamR_Ca_D_off
	reaction_535: CamR_Ca2_AB_CaMKIIp() + Ca() -> CamR_Ca3_ABC_CaMKIIp() K_Cam_Ca_on
	reaction_536: CamR_Ca2_AB_CaMKIIp() + Ca() -> CamR_Ca3_ABD_CaMKIIp() K_Cam_Ca_on
	reaction_537: CamR_Ca2_AC_CaMKIIp() + Ca() -> CamR_Ca3_ABC_CaMKIIp() K_Cam_Ca_on
	reaction_538: CamR_Ca2_AC_CaMKIIp() + Ca() -> CamR_Ca3_ACD_CaMKIIp() K_Cam_Ca_on
	reaction_539: CamR_Ca2_AD_CaMKIIp() + Ca() -> CamR_Ca3_ABD_CaMKIIp() K_Cam_Ca_on
	reaction_540: CamR_Ca2_AD_CaMKIIp() + Ca() -> CamR_Ca3_ACD_CaMKIIp() K_Cam_Ca_on
	reaction_541: CamR_Ca2_BC_CaMKIIp() + Ca() -> CamR_Ca3_ABC_CaMKIIp() K_Cam_Ca_on
	reaction_542: CamR_Ca2_BC_CaMKIIp() + Ca() -> CamR_Ca3_BCD_CaMKIIp() K_Cam_Ca_on
	reaction_543: CamR_Ca2_BD_CaMKIIp() + Ca() -> CamR_Ca3_ABD_CaMKIIp() K_Cam_Ca_on
	reaction_544: CamR_Ca2_BD_CaMKIIp() + Ca() -> CamR_Ca3_BCD_CaMKIIp() K_Cam_Ca_on
	reaction_545: CamR_Ca2_CD_CaMKIIp() + Ca() -> CamR_Ca3_ACD_CaMKIIp() K_Cam_Ca_on
	reaction_546: CamR_Ca2_CD_CaMKIIp() + Ca() -> CamR_Ca3_BCD_CaMKIIp() K_Cam_Ca_on
	reaction_547: CamR_Ca3_ABC_CaMKIIp() -> CamR_Ca2_AB_CaMKIIp() + Ca() K_CamR_Ca_C_off
	reaction_548: CamR_Ca3_ABC_CaMKIIp() -> CamR_Ca2_AC_CaMKIIp() + Ca() K_CamR_Ca_B_off
	reaction_549: CamR_Ca3_ABC_CaMKIIp() -> CamR_Ca2_BC_CaMKIIp() + Ca() K_CamR_Ca_A_off
	reaction_550: CamR_Ca3_ABD_CaMKIIp() -> CamR_Ca2_AB_CaMKIIp() + Ca() K_CamR_Ca_D_off
	reaction_551: CamR_Ca3_ABD_CaMKIIp() -> CamR_Ca2_AD_CaMKIIp() + Ca() K_CamR_Ca_B_off
	reaction_552: CamR_Ca3_ABD_CaMKIIp() -> CamR_Ca2_BD_CaMKIIp() + Ca() K_CamR_Ca_A_off
	reaction_553: CamR_Ca3_ACD_CaMKIIp() -> CamR_Ca2_AC_CaMKIIp() + Ca() K_CamR_Ca_D_off
	reaction_554: CamR_Ca3_ACD_CaMKIIp() -> CamR_Ca2_AD_CaMKIIp() + Ca() K_CamR_Ca_C_off
	reaction_555: CamR_Ca3_ACD_CaMKIIp() -> CamR_Ca2_CD_CaMKIIp() + Ca() K_CamR_Ca_A_off
	reaction_556: CamR_Ca3_BCD_CaMKIIp() -> CamR_Ca2_BC_CaMKIIp() + Ca() K_CamR_Ca_D_off
	reaction_557: CamR_Ca3_BCD_CaMKIIp() -> CamR_Ca2_BD_CaMKIIp() + Ca() K_CamR_Ca_C_off
	reaction_558: CamR_Ca3_BCD_CaMKIIp() -> CamR_Ca2_CD_CaMKIIp() + Ca() K_CamR_Ca_B_off
	reaction_559: CamR_Ca3_BCD_CaMKIIp() + Ca() -> CamR_Ca4_ABCD_CaMKIIp() K_Cam_Ca_on
	reaction_560: CamR_Ca3_ACD_CaMKIIp() + Ca() -> CamR_Ca4_ABCD_CaMKIIp() K_Cam_Ca_on
	reaction_561: CamR_Ca3_ABD_CaMKIIp() + Ca() -> CamR_Ca4_ABCD_CaMKIIp() K_Cam_Ca_on
	reaction_562: CamR_Ca3_ABC_CaMKIIp() + Ca() -> CamR_Ca4_ABCD_CaMKIIp() K_Cam_Ca_on
	reaction_563: CamR_Ca4_ABCD_CaMKIIp() -> CamR_Ca3_BCD_CaMKIIp() + Ca() K_CamR_Ca_A_off
	reaction_564: CamR_Ca4_ABCD_CaMKIIp() -> CamR_Ca3_ACD_CaMKIIp() + Ca() K_CamR_Ca_B_off
	reaction_565: CamR_Ca4_ABCD_CaMKIIp() -> CamR_Ca3_ABD_CaMKIIp() + Ca() K_CamR_Ca_C_off
	reaction_566: CamR_Ca4_ABCD_CaMKIIp() -> CamR_Ca3_ABC_CaMKIIp() + Ca() K_CamR_Ca_D_off
	reaction_400: D() + PKA() -> D_PKA() K_D_PKA_on
	reaction_401: D_PKA() -> D() + PKA() K_D_PKA_off
	reaction_402: D_PKA() -> Dp() + PKA() K_D_PKA_off_p
	reaction_403: Dp() + CamR_PP2B() -> Dp_CamR_PP2B() K_CamR_PP2B_Dp_on
	reaction_404: Dp_CamR_PP2B() -> Dp() + CamR_PP2B() K_CamR_PP2B_Dp_off
	reaction_405: Dp_CamR_PP2B() -> D() + CamR_PP2B() K_CamR_PP2B_D_off
	reaction_406: Dp() + CamR_Ca1_A_PP2B() -> Dp_CamR_Ca1_A_PP2B() K_CamR_PP2B_Dp_on
	reaction_407: Dp_CamR_Ca1_A_PP2B() -> Dp() + CamR_Ca1_A_PP2B() K_CamR_PP2B_Dp_off
	reaction_408: Dp_CamR_Ca1_A_PP2B() -> D() + CamR_Ca1_A_PP2B() K_CamR_PP2B_D_off
	reaction_409: Dp() + CamR_Ca1_B_PP2B() -> Dp_CamR_Ca1_B_PP2B() K_CamR_PP2B_Dp_on
	reaction_410: Dp_CamR_Ca1_B_PP2B() -> Dp() + CamR_Ca1_B_PP2B() K_CamR_PP2B_Dp_off
	reaction_411: Dp_CamR_Ca1_B_PP2B() -> D() + CamR_Ca1_B_PP2B() K_CamR_PP2B_D_off
	reaction_412: Dp() + CamR_Ca1_C_PP2B() -> Dp_CamR_Ca1_C_PP2B() K_CamR_PP2B_Dp_on
	reaction_413: Dp_CamR_Ca1_C_PP2B() -> Dp() + CamR_Ca1_C_PP2B() K_CamR_PP2B_Dp_off
	reaction_414: Dp_CamR_Ca1_C_PP2B() -> D() + CamR_Ca1_C_PP2B() K_CamR_PP2B_D_off
	reaction_415: Dp() + CamR_Ca1_D_PP2B() -> Dp_CamR_Ca1_D_PP2B() K_CamR_PP2B_Dp_on
	reaction_416: Dp_CamR_Ca1_D_PP2B() -> Dp() + CamR_Ca1_D_PP2B() K_CamR_PP2B_Dp_off
	reaction_417: Dp_CamR_Ca1_D_PP2B() -> D() + CamR_Ca1_D_PP2B() K_CamR_PP2B_D_off
	reaction_418: Dp() + CamR_Ca2_AB_PP2B() -> Dp_CamR_Ca2_AB_PP2B() K_CamR_PP2B_Dp_on
	reaction_419: Dp_CamR_Ca2_AB_PP2B() -> Dp() + CamR_Ca2_AB_PP2B() K_CamR_PP2B_Dp_off
	reaction_420: Dp_CamR_Ca2_AB_PP2B() -> D() + CamR_Ca2_AB_PP2B() K_CamR_PP2B_D_off
	reaction_421: Dp() + CamR_Ca2_AC_PP2B() -> Dp_CamR_Ca2_AC_PP2B() K_CamR_PP2B_Dp_on
	reaction_422: Dp_CamR_Ca2_AC_PP2B() -> Dp() + CamR_Ca2_AC_PP2B() K_CamR_PP2B_Dp_off
	reaction_423: Dp_CamR_Ca2_AC_PP2B() -> D() + CamR_Ca2_AC_PP2B() K_CamR_PP2B_D_off
	reaction_424: Dp() + CamR_Ca2_AD_PP2B() -> Dp_CamR_Ca2_AD_PP2B() K_CamR_PP2B_Dp_on
	reaction_425: Dp_CamR_Ca2_AD_PP2B() -> Dp() + CamR_Ca2_AD_PP2B() K_CamR_PP2B_Dp_off
	reaction_426: Dp_CamR_Ca2_AD_PP2B() -> D() + CamR_Ca2_AD_PP2B() K_CamR_PP2B_D_off
	reaction_427: Dp() + CamR_Ca2_BC_PP2B() -> Dp_CamR_Ca2_BC_PP2B() K_CamR_PP2B_Dp_on
	reaction_428: Dp_CamR_Ca2_BC_PP2B() -> Dp() + CamR_Ca2_BC_PP2B() K_CamR_PP2B_Dp_off
	reaction_429: Dp_CamR_Ca2_BC_PP2B() -> D() + CamR_Ca2_BC_PP2B() K_CamR_PP2B_D_off
	reaction_430: Dp() + CamR_Ca2_BD_PP2B() -> Dp_CamR_Ca2_BD_PP2B() K_CamR_PP2B_Dp_on
	reaction_431: Dp_CamR_Ca2_BD_PP2B() -> Dp() + CamR_Ca2_BD_PP2B() K_CamR_PP2B_Dp_off
	reaction_432: Dp_CamR_Ca2_BD_PP2B() -> D() + CamR_Ca2_BD_PP2B() K_CamR_PP2B_D_off
	reaction_433: Dp() + CamR_Ca2_CD_PP2B() -> Dp_CamR_Ca2_CD_PP2B() K_CamR_PP2B_Dp_on
	reaction_434: Dp_CamR_Ca2_CD_PP2B() -> Dp() + CamR_Ca2_CD_PP2B() K_CamR_PP2B_Dp_off
	reaction_435: Dp_CamR_Ca2_CD_PP2B() -> D() + CamR_Ca2_CD_PP2B() K_CamR_PP2B_D_off
	reaction_436: Dp() + CamR_Ca3_ABC_PP2B() -> Dp_CamR_Ca3_ABC_PP2B() K_CamR_PP2B_Dp_on
	reaction_437: Dp_CamR_Ca3_ABC_PP2B() -> Dp() + CamR_Ca3_ABC_PP2B() K_CamR_PP2B_Dp_off
	reaction_438: Dp_CamR_Ca3_ABC_PP2B() -> D() + CamR_Ca3_ABC_PP2B() K_CamR_PP2B_D_off
	reaction_439: Dp() + CamR_Ca3_ABD_PP2B() -> Dp_CamR_Ca3_ABD_PP2B() K_CamR_PP2B_Dp_on
	reaction_440: Dp_CamR_Ca3_ABD_PP2B() -> Dp() + CamR_Ca3_ABD_PP2B() K_CamR_PP2B_Dp_off
	reaction_441: Dp_CamR_Ca3_ABD_PP2B() -> D() + CamR_Ca3_ABD_PP2B() K_CamR_PP2B_D_off
	reaction_442: Dp() + CamR_Ca3_ACD_PP2B() -> Dp_CamR_Ca3_ACD_PP2B() K_CamR_PP2B_Dp_on
	reaction_443: Dp_CamR_Ca3_ACD_PP2B() -> Dp() + CamR_Ca3_ACD_PP2B() K_CamR_PP2B_Dp_off
	reaction_444: Dp_CamR_Ca3_ACD_PP2B() -> D() + CamR_Ca3_ACD_PP2B() K_CamR_PP2B_D_off
	reaction_445: Dp() + CamR_Ca3_BCD_PP2B() -> Dp_CamR_Ca3_BCD_PP2B() K_CamR_PP2B_Dp_on
	reaction_446: Dp_CamR_Ca3_BCD_PP2B() -> Dp() + CamR_Ca3_BCD_PP2B() K_CamR_PP2B_Dp_off
	reaction_447: Dp_CamR_Ca3_BCD_PP2B() -> D() + CamR_Ca3_BCD_PP2B() K_CamR_PP2B_D_off
	reaction_448: Dp() + CamR_Ca4_ABCD_PP2B() -> Dp_CamR_Ca4_ABCD_PP2B() K_CamR_PP2B_Dp_on
	reaction_449: Dp_CamR_Ca4_ABCD_PP2B() -> Dp() + CamR_Ca4_ABCD_PP2B() K_CamR_PP2B_Dp_off
	reaction_450: Dp_CamR_Ca4_ABCD_PP2B() -> D() + CamR_Ca4_ABCD_PP2B() K_CamR_PP2B_D_off
	reaction_451: PP1a() + Dp() -> PP1a_Dp() K_PP1a_Dp_on
	reaction_452: PP1a_Dp() -> PP1a() + Dp() K_PP1a_Dp_off
	reaction_453: CaMKIIp() + PP1a() -> CaMKIIp_PP1a() K_CamMKIIp_PP1a_on
	reaction_454: CaMKIIp_PP1a() -> CaMKIIp() + PP1a() K_CamMKIIp_PP1a_off
	reaction_455: CaMKIIp_PP1a() -> CaMKII() + PP1a() K_CamMKIIp_PP1a_p_off
	reaction_456: CamR_CaMKIIp() + PP1a() -> CamR_CaMKIIp_PP1a() K_CamMKIIp_PP1a_on
	reaction_457: CamR_CaMKIIp_PP1a() -> CamR_CaMKIIp() + PP1a() K_CamMKIIp_PP1a_off
	reaction_458: CamR_CaMKIIp_PP1a() -> CamR_CaMKII() + PP1a() K_CamMKIIp_PP1a_p_off
	reaction_459: CamR_Ca1_A_CaMKIIp() + PP1a() -> CamR_Ca1_A_CaMKIIp_PP1a() K_CamMKIIp_PP1a_on
	reaction_460: CamR_Ca1_A_CaMKIIp_PP1a() -> CamR_Ca1_A_CaMKIIp() + PP1a() K_CamMKIIp_PP1a_off
	reaction_461: CamR_Ca1_A_CaMKIIp_PP1a() -> CamR_Ca1_A_CaMKII() + PP1a() K_CamMKIIp_PP1a_p_off
	reaction_462: CamR_Ca1_B_CaMKIIp() + PP1a() -> CamR_Ca1_B_CaMKIIp_PP1a() K_CamMKIIp_PP1a_on
	reaction_463: CamR_Ca1_B_CaMKIIp_PP1a() -> CamR_Ca1_B_CaMKIIp() + PP1a() K_CamMKIIp_PP1a_off
	reaction_464: CamR_Ca1_B_CaMKIIp_PP1a() -> CamR_Ca1_B_CaMKII() + PP1a() K_CamMKIIp_PP1a_p_off
	reaction_465: CamR_Ca1_C_CaMKIIp() + PP1a() -> CamR_Ca1_C_CaMKIIp_PP1a() K_CamMKIIp_PP1a_on
	reaction_466: CamR_Ca1_C_CaMKIIp_PP1a() -> CamR_Ca1_C_CaMKIIp() + PP1a() K_CamMKIIp_PP1a_off
	reaction_467: CamR_Ca1_C_CaMKIIp_PP1a() -> CamR_Ca1_C_CaMKII() + PP1a() K_CamMKIIp_PP1a_p_off
	reaction_468: CamR_Ca1_D_CaMKIIp() + PP1a() -> CamR_Ca1_D_CaMKIIp_PP1a() K_CamMKIIp_PP1a_on
	reaction_469: CamR_Ca1_D_CaMKIIp_PP1a() -> CamR_Ca1_D_CaMKIIp() + PP1a() K_CamMKIIp_PP1a_off
	reaction_470: CamR_Ca1_D_CaMKIIp_PP1a() -> CamR_Ca1_D_CaMKII() + PP1a() K_CamMKIIp_PP1a_p_off
	reaction_471: CamR_Ca2_AB_CaMKIIp() + PP1a() -> CamR_Ca2_AB_CaMKIIp_PP1a() K_CamMKIIp_PP1a_on
	reaction_472: CamR_Ca2_AB_CaMKIIp_PP1a() -> CamR_Ca2_AB_CaMKIIp() + PP1a() K_CamMKIIp_PP1a_off
	reaction_473: CamR_Ca2_AB_CaMKIIp_PP1a() -> CamR_Ca2_AB_CaMKII() + PP1a() K_CamMKIIp_PP1a_p_off
	reaction_474: CamR_Ca2_AC_CaMKIIp() + PP1a() -> CamR_Ca2_AC_CaMKIIp_PP1a() K_CamMKIIp_PP1a_on
	reaction_475: CamR_Ca2_AC_CaMKIIp_PP1a() -> CamR_Ca2_AC_CaMKIIp() + PP1a() K_CamMKIIp_PP1a_off
	reaction_476: CamR_Ca2_AC_CaMKIIp_PP1a() -> CamR_Ca2_AC_CaMKII() + PP1a() K_CamMKIIp_PP1a_p_off
	reaction_477: CamR_Ca2_AD_CaMKIIp() + PP1a() -> CamR_Ca2_AD_CaMKIIp_PP1a() K_CamMKIIp_PP1a_on
	reaction_478: CamR_Ca2_AD_CaMKIIp_PP1a() -> CamR_Ca2_AD_CaMKIIp() + PP1a() K_CamMKIIp_PP1a_off
	reaction_479: CamR_Ca2_AD_CaMKIIp_PP1a() -> CamR_Ca2_AD_CaMKII() + PP1a() K_CamMKIIp_PP1a_p_off
	reaction_480: CamR_Ca2_BC_CaMKIIp() + PP1a() -> CamR_Ca2_BC_CaMKIIp_PP1a() K_CamMKIIp_PP1a_on
	reaction_481: CamR_Ca2_BC_CaMKIIp_PP1a() -> CamR_Ca2_BC_CaMKIIp() + PP1a() K_CamMKIIp_PP1a_off
	reaction_482: CamR_Ca2_BC_CaMKIIp_PP1a() -> CamR_Ca2_BC_CaMKII() + PP1a() K_CamMKIIp_PP1a_p_off
	reaction_483: CamR_Ca2_BD_CaMKIIp() + PP1a() -> CamR_Ca2_BD_CaMKIIp_PP1a() K_CamMKIIp_PP1a_on
	reaction_484: CamR_Ca2_BD_CaMKIIp_PP1a() -> CamR_Ca2_BD_CaMKIIp() + PP1a() K_CamMKIIp_PP1a_off
	reaction_485: CamR_Ca2_BD_CaMKIIp_PP1a() -> CamR_Ca2_BD_CaMKII() + PP1a() K_CamMKIIp_PP1a_p_off
	reaction_486: CamR_Ca2_CD_CaMKIIp() + PP1a() -> CamR_Ca2_CD_CaMKIIp_PP1a() K_CamMKIIp_PP1a_on
	reaction_487: CamR_Ca2_CD_CaMKIIp_PP1a() -> CamR_Ca2_CD_CaMKIIp() + PP1a() K_CamMKIIp_PP1a_off
	reaction_488: CamR_Ca2_CD_CaMKIIp_PP1a() -> CamR_Ca2_CD_CaMKII() + PP1a() K_CamMKIIp_PP1a_p_off
	reaction_489: CamR_Ca3_ABC_CaMKIIp() + PP1a() -> CamR_Ca3_ABC_CaMKIIp_PP1a() K_CamMKIIp_PP1a_on
	reaction_490: CamR_Ca3_ABC_CaMKIIp_PP1a() -> CamR_Ca3_ABC_CaMKIIp() + PP1a() K_CamMKIIp_PP1a_off
	reaction_491: CamR_Ca3_ABC_CaMKIIp_PP1a() -> CamR_Ca3_ABC_CaMKII() + PP1a() K_CamMKIIp_PP1a_p_off
	reaction_492: CamR_Ca3_ABD_CaMKIIp() + PP1a() -> CamR_Ca3_ABD_CaMKIIp_PP1a() K_CamMKIIp_PP1a_on
	reaction_493: CamR_Ca3_ABD_CaMKIIp_PP1a() -> CamR_Ca3_ABD_CaMKIIp() + PP1a() K_CamMKIIp_PP1a_off
	reaction_494: CamR_Ca3_ABD_CaMKIIp_PP1a() -> CamR_Ca3_ABD_CaMKII() + PP1a() K_CamMKIIp_PP1a_p_off
	reaction_495: CamR_Ca3_ACD_CaMKIIp() + PP1a() -> CamR_Ca3_ACD_CaMKIIp_PP1a() K_CamMKIIp_PP1a_on
	reaction_496: CamR_Ca3_ACD_CaMKIIp_PP1a() -> CamR_Ca3_ACD_CaMKIIp() + PP1a() K_CamMKIIp_PP1a_off
	reaction_497: CamR_Ca3_ACD_CaMKIIp_PP1a() -> CamR_Ca3_ACD_CaMKII() + PP1a() K_CamMKIIp_PP1a_p_off
	reaction_498: CamR_Ca3_BCD_CaMKIIp() + PP1a() -> CamR_Ca3_BCD_CaMKIIp_PP1a() K_CamMKIIp_PP1a_on
	reaction_499: CamR_Ca3_BCD_CaMKIIp_PP1a() -> CamR_Ca3_BCD_CaMKIIp() + PP1a() K_CamMKIIp_PP1a_off
	reaction_500: CamR_Ca3_BCD_CaMKIIp_PP1a() -> CamR_Ca3_BCD_CaMKII() + PP1a() K_CamMKIIp_PP1a_p_off
	reaction_501: CamR_Ca4_ABCD_CaMKIIp() + PP1a() -> CamR_Ca4_ABCD_CaMKIIp_PP1a() K_CamMKIIp_PP1a_on
	reaction_502: CamR_Ca4_ABCD_CaMKIIp_PP1a() -> CamR_Ca4_ABCD_CaMKIIp() + PP1a() K_CamMKIIp_PP1a_off
	reaction_503: CamR_Ca4_ABCD_CaMKIIp_PP1a() -> CamR_Ca4_ABCD_CaMKII() + PP1a() K_CamMKIIp_PP1a_p_off
	PP2B_binding_to_CamR_Ca2_AC: CamR_Ca2_AC() + PP2B() -> CamR_Ca2_AC_PP2B() K_CamR_PP2B_on
	Ca_binding_to_CBP_fast: CBP_fast() + Ca() -> CBP_fast_Ca() K_CBP_fast_on
	Ca_dissociating_from_CBP_fast_Ca: CBP_fast_Ca() -> CBP_fast() + Ca() K_CBP_fast_off
	Ca_binding_to_CBP_media: CBP_media() + Ca() -> CBP_media_Ca() K_CBP_media_on
	Ca_dissociating_from_CBP_media_Ca: CBP_media_Ca() -> CBP_media() + Ca() K_CBP_media_off
	Ca_binding_to_PP2Bi: PP2Bi() + Ca() -> PP2Bi_Ca1() K_PP2Bi_Ca_on
	Ca_binding_to_PP2Bi_Ca1: PP2Bi_Ca1() + Ca() -> PP2Bi_Ca2() K_PP2Bi_Ca_on
	Ca_binding_to_PP2Bi_Ca2: PP2Bi_Ca2() + Ca() -> PP2Bi_Ca3() K_PP2Bi_Ca_on
	Ca_binding_to_PP2Bi_Ca3: PP2Bi_Ca3() + Ca() -> PP2B() K_PP2Bi_Ca_on
	Ca_dissociating_from_PP2Bi_Ca2: PP2Bi_Ca2() -> PP2Bi_Ca1() + Ca() K_PP2Bi_Ca2_Ca_off
	Ca_dissociating_from_PP2Bi_Ca3: PP2Bi_Ca3() -> PP2Bi_Ca2() + Ca() K_PP2Bi_Ca3_Ca_off
	Ca_dissociating_from_PP2B: PP2B() -> PP2Bi_Ca3() + Ca() K_PP2B_Ca_off
	Ca_dissociating_from_PP2Bi_Ca1: PP2Bi_Ca1() -> PP2Bi() + Ca() K_PP2Bi_Ca1_Ca_off
	reaction_197: 0  -> Ca() parameter_1
end reaction rules
end model
