###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1006230052', 'http://identifiers.org/biomodels.db/BIOMD0000000687']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/17251133']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/doi/10.1093/intimm/dxh303']
#@BQB_HAS_PART:['http://identifiers.org/efo/0001062', 'http://identifiers.org/bto/BTO:0000289']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0009615']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/10088']
#@BQB_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/17251133']
#@creatorEmail:'c.lloyd@auckland.ac.nz'
#@creatorName:'Lloyd Catherine'
#@notes:'This is a plain translation of an SBML model created on 14/08/2021. The original model has 15 molecules and 25 reactions. The translated model has 15 molecules and 25 rules'
###
begin model
begin parameters
	a0 0.1
	a1 0.2
	k 1.0
	u 1.0
	lambda 10.0
	d 0.1
	beta 0.1
	gamma 0.5
	alpha 0.2
	phi 0.1
	eta 0.01
	pa 1e-06
	ca 15.5
	r 1.0
	ba 0.1
end parameters
begin molecule types
	v()
	m_4()
	m_5()
	x()
	m_2()
	m_8()
	m_3()
	m_1()
	m_6()
	m_0()
	L()
	y_0()
	m_7()
	z_a()
	y_1()
end molecule types
begin seed species
	x() 6.022e+23 # 1.0mol/L * 6.022e23/mol *1.0L #x #x_0
	v() 6.022e+23 #original 1.0mol/L #v #v_0
	z_a() 6.022e+23 #original 1.0mol/L #z_a #z_a
	m_0() 6.022e+23 #original 1.0mol/L #m_0 #m_0_0
end seed species
begin observables
	Species x x() #x
	Species y_0 y_0() #y_0
	Species y_1 y_1() #y_1
	Species L L() #L
	Species v v() #v
	Species z_a z_a() #z_a
	Species m_0 m_0() #m_0
	Species m_1 m_1() #m_1
	Species m_2 m_2() #m_2
	Species m_3 m_3() #m_3
	Species m_4 m_4() #m_4
	Species m_5 m_5() #m_5
	Species m_6 m_6() #m_6
	Species m_7 m_7() #m_7
	Species m_8 m_8() #m_8
end observables
begin functions
	R0() =  lambda*eta*(beta + gamma*phi/(d + phi))/(a1*d*(a0 + eta))
	fRate2() = beta*v
	fRate3() = gamma*v
	fRate7() = pa*z_a
	fRate9() = pa*z_a
	fRate11() = k*y_1
	fRate13() = alpha*m_8
	fRate14() = ca*z_a*(y_0 + y_1)
end functions
begin reaction rules
	Host_cell_proliferation: 0  -> x() lambda
	Host_cell_death: x() -> 0  d
	Infection_1: x() -> y_0() fRate2() #Modifiers(v_0)
	Infection_2: x() -> L() fRate3() #Modifiers(v_0)
	Infected_cell_death_1: y_0() -> 0  a0
	Infected_cell_infection_progression_1: y_0() -> y_1() eta
	Infected_cell_infection_progression_2: L() -> y_0() phi
	CTL_induced_infected_cell_death_1: y_0() -> 0  fRate7() #Modifiers(z_a)
	Infected_cell_death_2: y_1() -> 0  a1
	CTL_induced_infected_cell_death_2: y_1() -> 0  fRate9() #Modifiers(z_a)
	Infected_cell_death_3: L() -> 0  d
	Virus_particle_production: 0  -> v() fRate11() #Modifiers(y_1)
	Viral_particle_degradation: v() -> 0  u
	Precursor_T_cell_differentiation_2: 0  -> z_a() fRate13() #Modifiers(m_8_0)
	Infection_induced_CTL_proliferation_stimulation: 0  -> z_a() fRate14() #Modifiers(y_0, y_1)
	CTL_cell_death: z_a() -> 0  ba
	Naive_CTL_division_1: m_0() -> m_1() + m_1() r
	Naive_CTL_division_2: m_1() -> m_2() + m_2() r
	Naive_CTL_division_3: m_2() -> m_3() + m_3() r
	Naive_CTL_division_4: m_3() -> m_4() + m_4() r
	Naive_CTL_division_5: m_4() -> m_5() + m_5() r
	Naive_CTL_division_6: m_5() -> m_6() + m_6() r
	Naive_CTL_division_7: m_6() -> m_7() + m_7() r
	Naive_CTL_division_8: m_7() -> m_8() + m_8() r
	Precursor_T_cell_differentiation_1: m_8() -> 0  r
end reaction rules
end model
