###
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000704', 'http://identifiers.org/biomodels.db/MODEL6960055446']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/10500180']
#@BQB_HAS_PART:['http://identifiers.org/go/GO:0031572']
#@BQB_HAS_PROPERTY:['http://identifiers.org/mamo/MAMO_0000046']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/7742']
#@BQB_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/10500180']
#@creatorEmail:'matt.maire@free.fr'
#@creatorName:'MAIRE Matthieu'
#@notes:'This is a plain translation of an SBML model created on 13/08/2021. The original model has 17 molecules and 33 reactions. The translated model has 16 molecules and 39 rules'
###
begin model
begin parameters
	k1 1.0
	k1_0 10.0
	k2 0.1
	k2_0 0.01
	k2_1 0.1
	k3 100.0
	k5 1.0
	k6 0.01
	k7 1.0
	k7_0 0.01
	k8 0.1
	k8_1 0.01
	k9 1.0
	k9_1 1.0
	k11 1.0
	k12 0.1
	k13 1.0
	k14 0.0005
	k14_0 1.0
	k15 0.01
	k16 0.0002
	k17 0.1
	k18 1.0
	k18_0 0.01
	k20 0.1
	k21 0.01
	k22 0.1
	k23 0.1
	k_23 1.0
	kex 1.0
	kin 1e-05
	k_ctak1 0
	k_ctak1_0 0
	k_3 0
	k4 0
	k_Plk1 0
	k8_0 0
	k9_0 0
	k10 0
	k_Plk1_0 0
	Cdc25_active_total 602200000000000.0 #original 1e-06substance/volume
end parameters
begin molecule types
	Cdc25_inactive()
	p21()
	Cdc25_active()
	Chk1()
	Cdc25Ps216_inactive()
	MPF()
	p21_MPF()
	protein14_3_3()
	Wee1_phosphorylated()
	preMPF()
	Chk1P()
	Rad3_ATM()
	Cdc25Ps216_active()
	p53()
	Cdc25Ps216_14_3_3_inactive()
	Wee1()
end molecule types
begin seed species
	Cdc25_active() 602200000000000.1 # (1e-06 * 0.001)mol/L * 6.022e23/mol *1.0L #Cdc25_active #Cdc25_active
	Cdc25_inactive() 602200000000000.1 #original 1e-06substance/volume #Cdc25_inactive #Cdc25_inactive
	Cdc25Ps216_inactive() 1.2044e+16 #original 2e-05substance/volume #Cdc25Ps216_inactive #Cdc25Ps216_inactive
	Chk1P() 602200000000000.1 #original 1e-06substance/volume #Chk1P #Chk1P
	protein14_3_3() 1.2044e+21 #original 2.0substance/volume #protein14_3_3 #protein_14_3_3
	Cdc25Ps216_14_3_3_inactive() 1.8066000000000002e+19 #original 0.03substance/volume #Cdc25Ps216_14_3_3_inactive #Cdc25Ps216_14_3_3_inactive
	MPF() 6022000000000.001 #original 1e-08substance/volume #MPF #MPF
	preMPF() 602200000000000.1 #original 1e-06substance/volume #preMPF #preMPF
	Wee1() 6.022e+17 #original 0.001substance/volume #Wee1 #Wee1
	Chk1() 6.021993978e+20 #original 0.999999substance/volume #Chk1 #Chk1
end seed species
begin observables
	Species Cdc25_active Cdc25_active() #Cdc25_active
	Species Cdc25Ps216_active Cdc25Ps216_active() #Cdc25Ps216_active
	Species Cdc25_inactive Cdc25_inactive() #Cdc25_inactive
	Species Cdc25Ps216_inactive Cdc25Ps216_inactive() #Cdc25Ps216_inactive
	Species Chk1P Chk1P() #Chk1P
	Species protein14_3_3 protein14_3_3() #protein 14-3-3
	Species Cdc25Ps216_14_3_3_inactive Cdc25Ps216_14_3_3_inactive() #Cdc25Ps216_14-3-3_inactive
	Species p53 p53() #p53
	Species p21 p21() #p21
	Species MPF MPF() #MPF
	Species p21_MPF p21_MPF() #p21/MPF
	Species preMPF preMPF() #preMPF
	Species Wee1 Wee1() #Wee1
	Species Chk1 Chk1() #Chk1
	Species Rad3_ATM Rad3_ATM() #Rad3/ATM
	Species Wee1_phosphorylated Wee1_phosphorylated() #Wee1_phosphorylated
end observables
begin functions
	Cdc25_active_total_ar() = Cdc25Ps216_active + Cdc25_active
	fRate0() = 1.0*Cdc25_active*Chk1P*k2 + 1.0*Cdc25_active*k_ctak1
	fRate3() = 1.0*Cdc25_inactive*MPF*k7 + 1.0*Cdc25_inactive*k_Plk1
	fRate4() = 1.0*Cdc25Ps216_inactive*MPF*k18 + 1.0*Cdc25Ps216_inactive*k_Plk1_0
	fRate6() = 1.0*Cdc25_inactive*Chk1P*k2_1 + 1.0*Cdc25_inactive*k_ctak1_0
	fRate10() = k6*p53
	fRate12() = k20*p53
	fRate17() = 1.0*k9*preMPF*(Cdc25Ps216_active + Cdc25_active) + 1.0*k9_0*preMPF
	fRate18() = Wee1*k9_1
	fRate19() = MPF*k15
	fRate20() = k14/(k14_0*p53 + 1.0)
	fRate21() = Rad3_ATM*k1
	fRate28() = 1.0*MPF*Wee1*k8 + 1.0*Wee1*k8_0
end functions
begin reaction rules
	R2_Cdc25_Phosphorylation_reactants_0: 0  -> Cdc25_active() -1*(fRate0()) #Modifiers(Chk1P)
	R2_Cdc25_Phosphorylation_products_0: 0  -> Cdc25Ps216_active() fRate0() #Modifiers(Chk1P)
	R2__Cdc25_Dephosphorylation: Cdc25Ps216_active() -> Cdc25_active() k2_0
	R7__Cdc25_inactivation: Cdc25_active() -> Cdc25_inactive() k7_0
	R7_Cdc25_Activation_reactants_0: 0  -> Cdc25_inactive() -1*(fRate3()) #Modifiers(MPF)
	R7_Cdc25_Activation_products_0: 0  -> Cdc25_active() fRate3() #Modifiers(MPF)
	R18_Cdc25Ps216_activation_reactants_0: 0  -> Cdc25Ps216_inactive() -1*(fRate4()) #Modifiers(MPF)
	R18_Cdc25Ps216_activation_products_0: 0  -> Cdc25Ps216_active() fRate4() #Modifiers(MPF)
	R18__Cdc25Ps216_inactivation: Cdc25Ps216_active() -> Cdc25Ps216_inactive() k18_0
	R2__Cdc25_Phosphorylation_reactants_0: 0  -> Cdc25_inactive() -1*(fRate6()) #Modifiers(Chk1P)
	R2__Cdc25_Phosphorylation_products_0: 0  -> Cdc25Ps216_inactive() fRate6() #Modifiers(Chk1P)
	R3___Cdc25_protein_14_3_3_unbinding: Cdc25Ps216_14_3_3_inactive() -> protein14_3_3() + Cdc25_inactive() k_3
	R12_14_3_3_degradation: protein14_3_3() -> 0  k12
	R13_14_3_3_synthesis: 0  -> protein14_3_3() k13
	R6_14_3_3_synthesis_mediated_by_p53: 0  -> protein14_3_3() fRate10() #Modifiers(p53)
	R3___protein_14_3_3_Cdc25_binding: protein14_3_3() + Cdc25Ps216_inactive() -> Cdc25Ps216_14_3_3_inactive() k3
	R20_p21_synthesis_mediated_by_p53: 0  -> p21() fRate12() #Modifiers(p53)
	R21_p21_natural_synthesis: 0  -> p21() k21
	R22_p21_degradation: p21() -> 0  k22
	R23_p21_MPF_complex_formation: p21() + MPF() -> p21_MPF() k23
	R23__p21_MPF_unbinding: p21_MPF() -> p21() + MPF() k_23
	R9_MPF_activation_reactants_0: 0  -> preMPF() -1*(fRate17()) #Modifiers(Cdc25_active, Cdc25Ps216_active)
	R9_MPF_activation_products_0: 0  -> MPF() fRate17() #Modifiers(Cdc25_active, Cdc25Ps216_active)
	R9__MPF_inactivation: MPF() -> preMPF() fRate18() #Modifiers(Wee1)
	R15_MPF_degradation: MPF() -> 0  fRate19()
	R14_preMPF_synthesis: 0  -> preMPF() fRate20() #Modifiers(p53)
	R1_Chk1_Phosphorylation: Chk1() -> Chk1P() fRate21() #Modifiers(Rad3_ATM)
	R1__Chk1_Dephosphorylation: Chk1P() -> Chk1() k1_0
	R4_Rad3_ATM_natural_synthesis: 0  -> Rad3_ATM() k4
	R5_Rad3_ATM_degradation: Rad3_ATM() -> 0  k5
	R10_p53_synthesis: 0  -> p53() k10
	R11_p53_degradation: p53() -> 0  k11
	R16_Wee1_synthesis: 0  -> Wee1() k16
	R8_Wee1_Phosphorylation_reactants_0: 0  -> Wee1() -1*(fRate28()) #Modifiers(MPF)
	R8_Wee1_Phosphorylation_products_0: 0  -> Wee1_phosphorylated() fRate28() #Modifiers(MPF)
	R8__Wee1_Dephosphorylation: Wee1_phosphorylated() -> Wee1() k8_1
	R17_Wee1P_degradation: Wee1_phosphorylated() -> 0  k17
	Rex_Nuclear_export_of_iCdc25Ps216_14_3_3: Cdc25Ps216_14_3_3_inactive() -> 0  kex
	Rin_nuclear_import_of_iCdc25: 0  -> Cdc25_inactive() kin
end reaction rules
end model
