###
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/15094015']
#@BQB_IS_PART_OF:['http://identifiers.org/reactome/R-HSA-5676594']
#@BQB_OCCURS_IN:['http://identifiers.org/ncit/C132890']
#@BQB_HAS_PROPERTY:['http://identifiers.org/go/GO:0034612', 'http://identifiers.org/mamo/MAMO_0000046', 'http://identifiers.org/ncit/C39173']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/10090']
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000786', 'http://identifiers.org/biomodels.db/MODEL1908090003']
#@creatorEmail:'tiwarik@babraham.ac.uk'
#@creatorName:'Tiwari Krishna'
#@notes:'This is a plain translation of an SBML model created on 14/08/2021. The original model has 16 molecules and 32 reactions. The translated model has 15 molecules and 32 rules'
###
begin model
begin parameters
	Kv 5.0
	a1 0.5
	a2 0.2
	t1 0.1
	a3 1.0
	t2 0.1
	c1a 5e-07
	c3a 0.0004
	c4a 0.5
	c5a 0.0001
	c6a 2e-05
	c1 5e-07
	c3 0.0004
	c4 0.5
	c5 0.0003
	k1 0.0025
	k2 0.1
	k3 0.0015
	Kprod 2.5e-05
	Kdeg 0.000125
	i1 0.0025
	e2a 0.01
	i1a 0.001
	e1a 0.0005
	c1c 5e-07
	c3c 0.0004
	ModelValue_1 (5.0)
	c2a 0
	c2 0
	c2c 0
	TNF_R 0
end parameters
begin compartments
	#volume units: L
	Cytosol 3 1.0
	Nucleus 3 1.0
end compartments
begin molecule types
	IKKactive_IkB()
	IKK_active()
	IKKactive_IkB_NFKB()
	IKK_neutral()
	IkB_nuc()
	A20()
	IkB_NFKB()
	NFKB()
	IKK_inact()
	IkB_NFKB_nuc()
	NFKB_nuc()
	cgen_mRNA()
	A20_mRNA()
	IkB_mRNA()
	IkB()
end molecule types
begin seed species
	@Cytosol:IkB_NFKB() 3.6132e+16 # (0.06 * 1e-06)mol/L * 6.022e23/mol *1.0L #IkB_NFKB #IkB_NFKB
end seed species
begin observables
	Species IKK_neutral_Cytosol @Cytosol:IKK_neutral() #IKK_neutral
	Species IKK_active_Cytosol @Cytosol:IKK_active() #IKK_active
	Species IKK_inact_Cytosol @Cytosol:IKK_inact() #IKK_inact
	Species IKKactive_IkB_Cytosol @Cytosol:IKKactive_IkB() #IKKactive_IkB
	Species IkB_Cytosol @Cytosol:IkB() #IkB
	Species IKKactive_IkB_NFKB_Cytosol @Cytosol:IKKactive_IkB_NFKB() #IKKactive_IkB_NFKB
	Species IkB_NFKB_Cytosol @Cytosol:IkB_NFKB() #IkB_NFKB
	Species NFKB_Cytosol @Cytosol:NFKB() #NFKB
	Species NFKB_nuc_Nucleus @Nucleus:NFKB_nuc() #NFKB_nuc
	Species IkB_nuc_Nucleus @Nucleus:IkB_nuc() #IkB_nuc
	Species IkB_NFKB_nuc_Nucleus @Nucleus:IkB_NFKB_nuc() #IkB_NFKB_nuc
	Species IkB_mRNA_Nucleus @Nucleus:IkB_mRNA() #IkB_mRNA
	Species A20_mRNA_Nucleus @Nucleus:A20_mRNA() #A20_mRNA
	Species A20_Cytosol @Cytosol:A20() #A20
	Species cgen_mRNA_Nucleus @Nucleus:cgen_mRNA() #cgen_mRNA
end observables
begin functions
	cgen_mRNA_amp() = 10000*cgen_mRNA_Nucleus
	A20_mRNA_amp() = 10000*A20_mRNA_Nucleus
	IkB_mRNA_amp() = 10000*IkB_mRNA_Nucleus
	TNF_ar() = TNF_R
	NFKB_total() = IKKactive_IkB_NFKB_Cytosol + IkB_NFKB_Cytosol + IkB_NFKB_nuc_Nucleus/ModelValue_1 + NFKB_Cytosol + NFKB_nuc_Nucleus/ModelValue_1
	fRate2() = TNF_Cytosol*k1
	fRate5() = Kv*e2a
	fRate8() = Kv*e1a
	fRate10() = NFKB_nuc_Nucleus*c1a
	fRate17() = IkB_mRNA_Nucleus*c4a
	fRate19() = NFKB_nuc_Nucleus*c1
	fRate21() = A20_mRNA_Nucleus*c4
	fRate23() = A20_Cytosol*TNF_Cytosol*k2
	fRate24() = NFKB_nuc_Nucleus*c1c
	fRate28() = Kv*NFKB_Cytosol*i1
	fRate29() = IkB_nuc_Nucleus*e1a
	fRate30() = IkB_Cytosol*Kv*i1a
	fRate31() = IkB_NFKB_nuc_Nucleus*e2a
end functions
begin reaction rules
	IKKn_production: 0  -> IKK_neutral()@Cytosol Kprod
	IKKn_degradation: IKK_neutral()@Cytosol -> 0  Kdeg
	IKKn_activation: IKK_neutral()@Cytosol -> IKK_active()@Cytosol fRate2() #Modifiers(TNF)
	NFKB_export: NFKB()@Cytosol -> 0  i1
	IkBn_NFKBn_binding: NFKB_nuc()@Nucleus + IkB_nuc()@Nucleus -> IkB_NFKB_nuc()@Nucleus a1
	IkB_NFKB_n_export: IkB_NFKB_nuc()@Nucleus -> 0  fRate5()
	IkB_NFKB_binding: NFKB()@Cytosol + IkB()@Cytosol -> IkB_NFKB()@Cytosol a1
	IkB_degradation: IkB_NFKB()@Cytosol -> NFKB()@Cytosol c6a
	IkBnuc_export: IkB_nuc()@Nucleus -> 0  fRate8()
	IkB_export: IkB()@Cytosol -> 0  i1a
	IkB_transcription: 0  -> IkB_mRNA()@Nucleus fRate10() #Modifiers(NFKB_nuc)
	IKKa_spon_inactivation: IKK_active()@Cytosol -> IKK_inact()@Cytosol k3
	IKKinact_degradation: IKK_inact()@Cytosol -> 0  Kdeg
	IKKa_degradation: IKK_active()@Cytosol -> 0  Kdeg
	IKKa_IkB_binding: IKK_active()@Cytosol + IkB()@Cytosol -> IKKactive_IkB()@Cytosol a2
	IKKa_IkBNFKB_binding: IKK_active()@Cytosol + IkB_NFKB()@Cytosol -> IKKactive_IkB_NFKB()@Cytosol a3
	IkBmRNA_degradation: IkB_mRNA()@Nucleus -> 0  c3a
	IkB_translation: 0  -> IkB()@Cytosol fRate17() #Modifiers(IkB_mRNA)
	IkB_con_degradation: IkB()@Cytosol -> 0  c5a
	A20_transcription: 0  -> A20_mRNA()@Nucleus fRate19() #Modifiers(NFKB_nuc)
	A20mRNA_degradation: A20_mRNA()@Nucleus -> 0  c3
	A20_translation: 0  -> A20()@Cytosol fRate21() #Modifiers(A20_mRNA)
	A20_degradation: A20()@Cytosol -> 0  c5
	IKKa_inactivation_1: IKK_active()@Cytosol -> IKK_inact()@Cytosol fRate23() #Modifiers(TNF, A20)
	cgen_transcription: 0  -> cgen_mRNA()@Nucleus fRate24() #Modifiers(NFKB_nuc)
	cgen_mRNA_degradation: cgen_mRNA()@Nucleus -> 0  c3c
	IkB_degradation_1: IKKactive_IkB_NFKB()@Cytosol -> IKK_active()@Cytosol + NFKB()@Cytosol t2
	IkB_degradation_2: IKKactive_IkB()@Cytosol -> IKK_active()@Cytosol t1
	NFKBc_induced_NFKBn_production: 0  -> NFKB_nuc()@Nucleus fRate28() #Modifiers(NFKB)
	IkBn_induced_IkBc_production: 0  -> IkB()@Cytosol fRate29() #Modifiers(IkB_nuc)
	IkBc_induced_IkBn_production: 0  -> IkB_nuc()@Nucleus fRate30() #Modifiers(IkB)
	IkB_NFKB_n_induced_IkB_NFKBc_production: 0  -> IkB_NFKB()@Cytosol fRate31() #Modifiers(IkB_NFKB_nuc)
end reaction rules
end model
