###
#@BQM_IS_INSTANCE_OF:['http://identifiers.org/biomodels.db/MODEL1604100005', 'http://identifiers.org/go/GO:0008286', 'http://identifiers.org/taxonomy/9606']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/go/GO:0008286', 'http://identifiers.org/pubmed/27245161']
#@BQB_HAS_PROPERTY:['http://identifiers.org/biomodels.db/MODEL1604100005', 'http://identifiers.org/taxonomy/9606']
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1604100005', 'http://identifiers.org/biomodels.db/BIOMD0000000833']
#@creatorEmail:'msharifshohan@ebi.ac.uk'
#@creatorName:'Sharif Shohan Mohammad Umer'
#@notes:'This is a plain translation of an SBML model created on 14/08/2021. The original model has 61 molecules and 83 reactions. The translated model has 60 molecules and 83 rules'
###
begin model
begin parameters
	NA 6.02e+23
	Vo 1e-10
	V 3e-12
	nM 1e-09
	SF2 28621.0
	PTP 1.0
	PTEN 1.0
	SHIP 1.0
	SynthG4_init 1.0
	SynthIR_init 1.0
	k_1 0.2
	k_2 20.0
	k3 2500.0
	k_3 0.2
	Kd_akt 2955000000000.0
	Kd_pkc 2955000000000.0
	Kd_p70 400000000.0
	n 4.0
	n_p70 2.0
	Vmax 1.0
	k4 0.00033333333
	k_4 0.003
	k4p 0.0021
	k_4p 0.00021
	k_5 0.0012836059
	k5 38.636537
	k6 0.461
	k7 4.16
	k_7 2.22
	k7p 0.34657359
	k_7p 1.386
	k8 5.18091e-06
	k_8 10.0
	k9s 1.3862944
	k9a 1.99817e-05
	k_10 2.7725887
	k11 0.34657359
	k12 0.34657359
	k13 0.0069583333
	k_13 0.167
	k13p 0.104375
	k_14 0.001155
	p15 6.1129552e-07
	p_15 10.0
	k15 12.0
	k_16 0.0107215
	k17 0.0004592
	k_19 0.0183735
	k_20 0.69314718
	k_21 1.7650066e-05
	kcat24 399.6
	alpha24 0.00025
	kcat28 319.8
	kcat29 1200000.0
	kcat30 6.0
	kcat31 199.8
	kcat32 39.96
	beta32 2.0
	kcat33 7.98
	kcat35 19.98
	kcat36 39.96
	kcat39 2.796
	k_39 0.003996
	k41 39.96
	u (6.02e+23) * (3e-12) * (1e-09)
	IR_free_memb_init 1 * 150 * (1806.0)
	IR_free_cyt_init 0.1 * 150 * (1806.0) / 0.9
	IRS1_init 300 * (1806.0)
	PI3K_init 200 * (1806.0)
	PI45_init 0.994 * (541800.0)
	PI345_init 0.0031 * (541800.0)
	PI34_init 0.0029 * (541800.0)
	PKC_init 100 * (1806.0)
	GLUT4_memb_init 4 * (541800.0)
	GLUT4_cyt_init 96 * (541800.0)
	AMPK_init 20.5064 * (28621.0)
	mTORC1_init 25.14 * (28621.0)
	mTORC2_init 18.7959 * (28621.0)
	p70S6K_init 14.301 * (28621.0)
	TSC1_TSC2_pT1462_init 14.9175 * (28621.0)
	PI3K_variant_init 18.9345 * (28621.0)
	GS_init 200 * (1806.0)
	RasGAP_init 50 * (1806.0)
	SHP2_init 300 * (1806.0)
	iSrc_init 518 * (1806.0)
	RasGDP_init 150 * (1806.0)
	Raf_init 100 * (1806.0)
	Mek_init 200 * (1806.0)
	Erk_init 400 * (1806.0)
	Akt_init 100 * (1806.0)
	k1 60000000 / ((6.02e+23) * (1e-10))
	k2 60000000 / ((6.02e+23) * (1e-10))
	k_9 94 / 3.1 * (1.3862944)
	k9b 0.31 / 99.4 * (42.0360237419355)
	k10 3.1 / 2.9 * (2.7725887)
	k_11 10 * (0.34657359)
	k_12 10 * (0.34657359)
	k14 0.001155 * (52012800.0)
	k16 9.79766 / (28621.0)
	k_17 0.00640216 * (28621.0) / 5365.42
	k_18 0.0106652 / (28621.0)
	k18 0.000424 / (28621.0)
	k19 0.375353 / (28621.0)
	k20 0.00184043 * ((0.69314718) / 0.0113512) / (28621.0)
	k21 0.0365589 / (28621.0)
	k22 6.66e-8 / ((1806.0) * 1 / 60)
	k_22 2000000 * (2.21262458471761e-09) * (1806.0)
	Km24 110 * (1806.0)
	V25 6.66 * (1806.0) / (1 / 60)
	Km25 50 * (1806.0)
	k26 0.000666 / ((1806.0) * 1 / 60)
	k_26 100000 * (2.21262458471761e-05) * (1806.0)
	k27 0.000666 / ((1806.0) * 1 / 60)
	k_27 1000 * (1806.0) * (2.21262458471761e-05)
	Km28 50 * (1806.0)
	bRasGAP 1e-5 * (1806.0)
	Km29 50 * (1806.0)
	Km30 400 * (1806.0)
	Km31 10 * (1806.0)
	PKA 100 * (1806.0)
	Km32 10000 * (1806.0)
	alpha32 1e-6 / ((1806.0) * (1 / 60))
	Km33 50 * (1806.0)
	V34 16.6 * (1806.0) / (1 / 60)
	Km34 675.299 * (1806.0)
	Km35 500 * (1806.0)
	Km36 500 * (1806.0)
	V37 33.3 * (1806.0) / (1 / 60)
	Km37 500 * (1806.0)
	Km38 500 * (1806.0)
	V38 23.33 * (1806.0) / (1 / 60)
	Km39 5000 * (1806.0)
	V40 333 * (1806.0) / (1 / 60)
	Km40 143.3 * (1806.0)
	k42 0.0133 / ((1806.0) * 1 / 60)
	_rateLaw1 (42.0360237419355) * (1.0)
	_rateLaw2 (2.7725887) * (1.0)
	I_init 0
	Amino_Acids_input 0
	Amino_Acids____ 1.723568664e+29 #original 286212.0substance/L
end parameters
begin molecule types
	Akt__S474p_T309u__()
	Akt__S474u_T309u__()
	p70S6K__T389p__()
	Raf__statei__()
	I__bs1___I__bs2___IR__NPXY3_Y999p_alpha1_beta2_locm___RasGAP__bs3__()
	PI345____()
	TSC1_TSC2__S1387u_T1462p__()
	IRS1__S636p_Yu_Y896_YXXM__()
	AMPK__T172p__()
	IRS1__S636u_Yp_Y896_YXXM1___PI3K__SH21__()
	RasGAP__bs__()
	IRS1__S636u_Yp_Y8961_YXXM___SHP2__SH21__()
	IR__NPXY_Y999u_alpha_beta_locm__()
	Ras__stateGTP__()
	Erk__T202_T185p_Y204_Y187u__()
	I__bs1___IR__NPXY_Y999p_alpha1_beta_locc__()
	Erk__T202_T185u_Y204_Y187u__()
	Raf__stateaa__()
	I__bs__()
	SHP2__SH2__()
	Degr____()
	Ras__stateGDP__()
	GS__SH2_statei__()
	I__bs1___IR__NPXY_Y999u_alpha1_beta_locm__()
	Raf__statea__()
	IRS1__S636u_Yu_Y896_YXXM__()
	I__bs1___I__bs2___IR__NPXY_Y999p_alpha1_beta2_locc__()
	mTORC1__S2448u__()
	PKC__T410u__()
	PKC__T410p__()
	p70S6K__T389u__()
	PI3K_variant__Yp__()
	SynthG4____()
	mTORC1__S2448p__()
	GLUT4__locc__()
	Erk__T202_T185p_Y204_Y187p__()
	PI3K__SH2__()
	Mek__S218_S222p__()
	IR__NPXY_Y999u_alpha_beta_locc__()
	Src__statea__()
	Akt__S474p_T309p__()
	I__bs1___I__bs2___IR__NPXY_Y999p_alpha1_beta2_locm__()
	AMPK__T172u__()
	PI34____()
	mTORC2__S2481u__()
	PI3K_variant__Yu__()
	GS__SH21_statea___IRS1__S636u_Yp_Y8961_YXXM2___PI3K__SH22__()
	PI45____()
	mTORC2__S2481p__()
	GS__SH21_statea___IRS1__S636u_Yp_Y8961_YXXM__()
	Akt__S474u_T309p__()
	Src__statei__()
	TSC1_TSC2__S1387p_T1462u__()
	SynthIR____()
	Mek__S218_S222u__()
	I__bs1___IR__NPXY_Y999p_alpha1_beta_locm__()
	IRS1__S636u_Yp_Y896_YXXM__()
	GLUT4__locm__()
	I__bs1___IR__NPXY2_Y999p_alpha1_beta_locm___RasGAP__bs2__()
	GS__SH2_statea__()
end molecule types
begin seed species
	I__bs__() 3.625244e+30 # 6020000.0mol/L * 6.022e23/mol *1.0L #I__bs__ #S1
	IR__NPXY_Y999u_alpha_beta_locm__() 1.6313598e+29 #original 270900.0substance/L #IR__NPXY_Y999u_alpha_beta_locm__ #S2
	IR__NPXY_Y999u_alpha_beta_locc__() 1.812622e+28 #original 30100.0substance/L #IR__NPXY_Y999u_alpha_beta_locc__ #S3
	IRS1__S636u_Yu_Y896_YXXM__() 3.2627196e+29 #original 541800.0substance/L #IRS1__S636u_Yu_Y896_YXXM__ #S4
	PI3K__SH2__() 2.1751464e+29 #original 361200.0substance/L #PI3K__SH2__ #S5
	PI3K_variant__Yu__() 3.26346825504e+29 #original 541924.32substance/L #PI3K_variant__Yu__ #S6
	PI45____() 3.2431432824e+29 #original 538549.2substance/L #PI45____ #S7
	PI345____() 1.011443076e+27 #original 1679.58substance/L #PI345____ #S8
	PI34____() 9.461886840000001e+26 #original 1571.22substance/L #PI34____ #S9
	PKC__T410u__() 1.0875732e+29 #original 180600.0substance/L #PKC__T410u__ #S10
	GLUT4__locc__() 3.1322108160000003e+31 #original 52012800.0substance/L #GLUT4__locc__ #S11
	GLUT4__locm__() 1.30508784e+30 #original 2167200.0substance/L #GLUT4__locm__ #S12
	AMPK__T172u__() 3.5344024913200006e+29 #original 586915.06substance/L #AMPK__T172u__ #S14
	Akt__S474u_T309u__() 1.0875732e+29 #original 180600.0substance/L #Akt__S474u_T309u__ #S15
	mTORC1__S2448u__() 4.3330213426799996e+29 #original 719531.94substance/L #mTORC1__S2448u__ #S16
	mTORC2__S2481u__() 3.239575909820001e+29 #original 537956.81substance/L #mTORC2__S2481u__ #S17
	p70S6K__T389u__() 2.46485199314e+29 #original 409307.87substance/L #p70S6K__T389u__ #S18
	TSC1_TSC2__S1387u_T1462p__() 2.5711156029400002e+29 #original 426953.77substance/L #TSC1_TSC2__S1387u_T1462p__ #S19
	GS__SH2_statea__() 2.1751464e+29 #original 361200.0substance/L #GS__SH2_statea__ #S20
	RasGAP__bs__() 5.437866e+28 #original 90300.0substance/L #RasGAP__bs__ #S21
	SHP2__SH2__() 3.2627196e+29 #original 541800.0substance/L #SHP2__SH2__ #S22
	Src__statei__() 5.633629176e+29 #original 935508.0substance/L #Src__statei__ #S23
	Ras__stateGDP__() 1.6313598e+29 #original 270900.0substance/L #Ras__stateGDP__ #S24
	Raf__statei__() 1.0875732e+29 #original 180600.0substance/L #Raf__statei__ #S25
	Mek__S218_S222u__() 2.1751464e+29 #original 361200.0substance/L #Mek__S218_S222u__ #S26
	Erk__T202_T185u_Y204_Y187u__() 4.3502928e+29 #original 722400.0substance/L #Erk__T202_T185u_Y204_Y187u__ #S27
	SynthG4____() 6.022e+23 #original 1.0substance/L #SynthG4____ #S28
	SynthIR____() 6.022e+23 #original 1.0substance/L #SynthIR____ #S29
	Degr____() 2.1720180914400002e+30 #original 3606805.2substance/L #Degr____ #S31
end seed species
begin observables
	Species I__bs__ I__bs__() #I(bs)
	Species IR__NPXY_Y999u_alpha_beta_locm__ IR__NPXY_Y999u_alpha_beta_locm__() #IR(NPXY,Y999~u,alpha,beta,loc~m)
	Species IR__NPXY_Y999u_alpha_beta_locc__ IR__NPXY_Y999u_alpha_beta_locc__() #IR(NPXY,Y999~u,alpha,beta,loc~c)
	Species IRS1__S636u_Yu_Y896_YXXM__ IRS1__S636u_Yu_Y896_YXXM__() #IRS1(S636~u,Y~u,Y896,YXXM)
	Species PI3K__SH2__ PI3K__SH2__() #PI3K(SH2)
	Species PI3K_variant__Yu__ PI3K_variant__Yu__() #PI3K_variant(Y~u)
	Species PI45____ PI45____() #PI45()
	Species PI345____ PI345____() #PI345()
	Species PI34____ PI34____() #PI34()
	Species PKC__T410u__ PKC__T410u__() #PKC(T410~u)
	Species GLUT4__locc__ GLUT4__locc__() #GLUT4(loc~c)
	Species GLUT4__locm__ GLUT4__locm__() #GLUT4(loc~m)
	Species AMPK__T172u__ AMPK__T172u__() #AMPK(T172~u)
	Species Akt__S474u_T309u__ Akt__S474u_T309u__() #Akt(S474~u,T309~u)
	Species mTORC1__S2448u__ mTORC1__S2448u__() #mTORC1(S2448~u)
	Species mTORC2__S2481u__ mTORC2__S2481u__() #mTORC2(S2481~u)
	Species p70S6K__T389u__ p70S6K__T389u__() #p70S6K(T389~u)
	Species TSC1_TSC2__S1387u_T1462p__ TSC1_TSC2__S1387u_T1462p__() #TSC1_TSC2(S1387~u,T1462~p)
	Species GS__SH2_statea__ GS__SH2_statea__() #GS(SH2,state~a)
	Species RasGAP__bs__ RasGAP__bs__() #RasGAP(bs)
	Species SHP2__SH2__ SHP2__SH2__() #SHP2(SH2)
	Species Src__statei__ Src__statei__() #Src(state~i)
	Species Ras__stateGDP__ Ras__stateGDP__() #Ras(state~GDP)
	Species Raf__statei__ Raf__statei__() #Raf(state~i)
	Species Mek__S218_S222u__ Mek__S218_S222u__() #Mek(S218_S222~u)
	Species Erk__T202_T185u_Y204_Y187u__ Erk__T202_T185u_Y204_Y187u__() #Erk(T202_T185~u,Y204_Y187~u)
	Species SynthG4____ SynthG4____() #SynthG4()
	Species SynthIR____ SynthIR____() #SynthIR()
	Species I__bs1___IR__NPXY_Y999u_alpha1_beta_locm__ I__bs1___IR__NPXY_Y999u_alpha1_beta_locm__() #I(bs!1).IR(NPXY,Y999~u,alpha!1,beta,loc~m)
	Species Degr____ Degr____() #Degr()
	Species IRS1__S636u_Yp_Y896_YXXM__ IRS1__S636u_Yp_Y896_YXXM__() #IRS1(S636~u,Y~p,Y896,YXXM)
	Species IRS1__S636p_Yu_Y896_YXXM__ IRS1__S636p_Yu_Y896_YXXM__() #IRS1(S636~p,Y~u,Y896,YXXM)
	Species Akt__S474u_T309p__ Akt__S474u_T309p__() #Akt(S474~u,T309~p)
	Species PKC__T410p__ PKC__T410p__() #PKC(T410~p)
	Species PI3K_variant__Yp__ PI3K_variant__Yp__() #PI3K_variant(Y~p)
	Species AMPK__T172p__ AMPK__T172p__() #AMPK(T172~p)
	Species Akt__S474p_T309u__ Akt__S474p_T309u__() #Akt(S474~p,T309~u)
	Species TSC1_TSC2__S1387p_T1462u__ TSC1_TSC2__S1387p_T1462u__() #TSC1_TSC2(S1387~p,T1462~u)
	Species mTORC1__S2448p__ mTORC1__S2448p__() #mTORC1(S2448~p)
	Species mTORC2__S2481p__ mTORC2__S2481p__() #mTORC2(S2481~p)
	Species p70S6K__T389p__ p70S6K__T389p__() #p70S6K(T389~p)
	Species Src__statea__ Src__statea__() #Src(state~a)
	Species Ras__stateGTP__ Ras__stateGTP__() #Ras(state~GTP)
	Species Raf__statea__ Raf__statea__() #Raf(state~a)
	Species Mek__S218_S222p__ Mek__S218_S222p__() #Mek(S218_S222~p)
	Species Erk__T202_T185p_Y204_Y187u__ Erk__T202_T185p_Y204_Y187u__() #Erk(T202_T185~p,Y204_Y187~u)
	Species GS__SH2_statei__ GS__SH2_statei__() #GS(SH2,state~i)
	Species I__bs1___IR__NPXY_Y999p_alpha1_beta_locm__ I__bs1___IR__NPXY_Y999p_alpha1_beta_locm__() #I(bs!1).IR(NPXY,Y999~p,alpha!1,beta,loc~m)
	Species IRS1__S636u_Yp_Y896_YXXM1___PI3K__SH21__ IRS1__S636u_Yp_Y896_YXXM1___PI3K__SH21__() #IRS1(S636~u,Y~p,Y896,YXXM!1).PI3K(SH2!1)
	Species Akt__S474p_T309p__ Akt__S474p_T309p__() #Akt(S474~p,T309~p)
	Species GS__SH21_statea___IRS1__S636u_Yp_Y8961_YXXM__ GS__SH21_statea___IRS1__S636u_Yp_Y8961_YXXM__() #GS(SH2!1,state~a).IRS1(S636~u,Y~p,Y896!1,YXXM)
	Species IRS1__S636u_Yp_Y8961_YXXM___SHP2__SH21__ IRS1__S636u_Yp_Y8961_YXXM___SHP2__SH21__() #IRS1(S636~u,Y~p,Y896!1,YXXM).SHP2(SH2!1)
	Species Raf__stateaa__ Raf__stateaa__() #Raf(state~aa)
	Species Erk__T202_T185p_Y204_Y187p__ Erk__T202_T185p_Y204_Y187p__() #Erk(T202_T185~p,Y204_Y187~p)
	Species I__bs1___I__bs2___IR__NPXY_Y999p_alpha1_beta2_locm__ I__bs1___I__bs2___IR__NPXY_Y999p_alpha1_beta2_locm__() #I(bs!1).I(bs!2).IR(NPXY,Y999~p,alpha!1,beta!2,loc~m)
	Species I__bs1___IR__NPXY_Y999p_alpha1_beta_locc__ I__bs1___IR__NPXY_Y999p_alpha1_beta_locc__() #I(bs!1).IR(NPXY,Y999~p,alpha!1,beta,loc~c)
	Species I__bs1___IR__NPXY2_Y999p_alpha1_beta_locm___RasGAP__bs2__ I__bs1___IR__NPXY2_Y999p_alpha1_beta_locm___RasGAP__bs2__() #I(bs!1).IR(NPXY!2,Y999~p,alpha!1,beta,loc~m).RasGAP(bs!2)
	Species GS__SH21_statea___IRS1__S636u_Yp_Y8961_YXXM2___PI3K__SH22__ GS__SH21_statea___IRS1__S636u_Yp_Y8961_YXXM2___PI3K__SH22__() #GS(SH2!1,state~a).IRS1(S636~u,Y~p,Y896!1,YXXM!2).PI3K(SH2!2)
	Species I__bs1___I__bs2___IR__NPXY_Y999p_alpha1_beta2_locc__ I__bs1___I__bs2___IR__NPXY_Y999p_alpha1_beta2_locc__() #I(bs!1).I(bs!2).IR(NPXY,Y999~p,alpha!1,beta!2,loc~c)
	Species I__bs1___I__bs2___IR__NPXY3_Y999p_alpha1_beta2_locm___RasGAP__bs3__ I__bs1___I__bs2___IR__NPXY3_Y999p_alpha1_beta2_locm___RasGAP__bs3__() #I(bs!1).I(bs!2).IR(NPXY!3,Y999~p,alpha!1,beta!2,loc~m).RasGAP(bs!3)
end observables
begin functions
	Akt_pp() = Akt__S474p_T309p__
	Akt_pT309() = Akt__S474u_T309p__
	PKC_pT410() = PKC__T410p__
	Akt_pS474() = Akt__S474p_T309u__
	f13() = k13 + k13p*(0.8*PKC_pT410/PKC_init + (0.2*Akt_pS474 + 0.2*Akt_pT309 + 0.2*Akt_pp)/Akt_init)
	Erk_pT202_T185() = Erk__T202_T185p_Y204_Y187u__
	Mek_pS218_S222() = Mek__S218_S222p__
	Erk() = Erk__T202_T185u_Y204_Y187u__
	f35() = Mek_pS218_S222*kcat35/(Erk + Erk_pT202_T185*Km35/Km36 + Km35)
	f36() = Mek_pS218_S222*kcat36/(Erk*Km36/Km35 + Erk_pT202_T185 + Km36)
	aaRaf() = Raf__stateaa__
	f32() = PKA*kcat32/(Km32 + aaRaf) + alpha32*(Akt_pT309 + Akt_pp*beta32)
	Mek() = Mek__S218_S222u__
	f33() = aaRaf*kcat33/(Km33 + Mek)
	aRaf() = Raf__statea__
	aSrc() = Src__statea__
	f31() = aSrc*kcat31/(Km31 + aRaf)
	Erk_ppY204_Y187() = Erk__T202_T185p_Y204_Y187p__
	f38() = V38/(Erk_pT202_T185 + Erk_ppY204_Y187*Km38/Km37 + Km38)
	f37() = V37/(Erk_pT202_T185*Km37/Km38 + Erk_ppY204_Y187 + Km37)
	GS() = GS__SH2_statea__
	f39() = Erk_ppY204_Y187*kcat39/(GS + Km39)
	RasGTP() = Ras__stateGTP__
	IR_RasGAP_complex() = I__bs1___IR__NPXY2_Y999p_alpha1_beta_locm___RasGAP__bs2__ + I__bs1___I__bs2___IR__NPXY3_Y999p_alpha1_beta2_locm___RasGAP__bs3__
	f29() = kcat29*(IR_RasGAP_complex + bRasGAP)/(Km29 + RasGTP)
	Raf() = Raf__statei__
	f30() = RasGTP*kcat30/(Km30 + Raf)
	iSrc() = Src__statei__
	IR_phos_memb() = I__bs1___IR__NPXY2_Y999p_alpha1_beta_locm___RasGAP__bs2__ + I__bs1___IR__NPXY_Y999p_alpha1_beta_locm__ + I__bs1___I__bs2___IR__NPXY3_Y999p_alpha1_beta2_locm___RasGAP__bs3__ + I__bs1___I__bs2___IR__NPXY_Y999p_alpha1_beta2_locm__
	f24() = 0.01*IR_phos_memb*alpha24*kcat24/(Km24 + iSrc)
	IRS1_GS_complex() = GS__SH21_statea___IRS1__S636u_Yp_Y8961_YXXM2___PI3K__SH22__ + GS__SH21_statea___IRS1__S636u_Yp_Y8961_YXXM__
	RasGDP() = Ras__stateGDP__
	f28() = IRS1_GS_complex*kcat28/(Km28 + RasGDP)
	IRS1_PI3K_complex() = GS__SH21_statea___IRS1__S636u_Yp_Y8961_YXXM2___PI3K__SH22__ + IRS1__S636u_Yp_Y896_YXXM1___PI3K__SH21__
	f9() = IRS1_PI3K_complex*k9a + k9b
	IRS1_SHP2_complex() = IRS1__S636u_Yp_Y8961_YXXM___SHP2__SH21__
	f42() = IRS1_SHP2_complex*k42
	Akt_pT() = Akt__S474p_T309p__ + Akt__S474u_T309p__
	f_3() = PTP*k_3*(-Akt_pT^n*Vmax/(2*Akt_pT^n + 2*Kd_akt) + 1)
	f_7() = PTP*k_7*(-Akt_pT^n*Vmax/(2*Akt_pT^n + 2*Kd_akt) + 1)
	f6() = PTP*k6*(-Akt_pT^n*Vmax/(2*Akt_pT^n + 2*Kd_akt) + 1)
	f7() = IR_phos_memb*k7/IR_free_memb_init
	PI3K_variant_p() = PI3K_variant__Yp__
	f19() = PI3K_variant_p*k19
	f7p() = PKC_pT410^n*Vmax*k7p/(Kd_pkc + PKC_pT410^n)
	f25() = V25/(Km25 + aSrc)
	f34() = V34/(Km34 + Mek_pS218_S222)
	p70S6K_pT389() = p70S6K__T389p__
	f15() = Vmax*k15*p70S6K_pT389^n_p70/(Kd_p70 + p70S6K_pT389^n_p70)
	fp15() = IR_phos_memb*p15
	AMPK_pT172() = AMPK__T172p__
	f21() = AMPK_pT172*k21
	mTORC2_pS2481() = mTORC2__S2481p__
	f17() = k17*mTORC2_pS2481
	f_21() = Akt_pT*k_21
	IRS1_pY() = IRS1__S636u_Yp_Y896_YXXM__
	f16() = IRS1_pY*k16
	PI345() = PI345____
	f12() = k12*(PI345 - PI345_init)/(9*PI345_init)
	f11() = k11*(PI345 - PI345_init)/(9*PI345_init)
	mTORC1_pS2448() = mTORC1__S2448p__
	f20() = k20*mTORC1_pS2448
	f40() = V40/(IRS1_GS_complex + Km40)
	TSC1_TSC2_pS1387() = TSC1_TSC2__S1387p_T1462u__
	f_18() = TSC1_TSC2_pS1387*k_18
	Aminoacids() = Amino_Acids____
	f18() = Aminoacids*k18
	iGS() = GS__SH2_statei__
	f_39() = k_39
	Insulin() = I__bs__
	IR_bound_memb() = I__bs1___IR__NPXY2_Y999p_alpha1_beta_locm___RasGAP__bs2__ + I__bs1___IR__NPXY_Y999p_alpha1_beta_locm__ + I__bs1___I__bs2___IR__NPXY3_Y999p_alpha1_beta2_locm___RasGAP__bs3__ + I__bs1___I__bs2___IR__NPXY_Y999p_alpha1_beta2_locm__
	mTORC1() = mTORC1__S2448u__
	GLUT4_memb() = GLUT4__locm__
	PI34() = PI34____
	IRS1_pS636() = IRS1__S636p_Yu_Y896_YXXM__
	Akt_pS() = Akt__S474p_T309p__ + Akt__S474p_T309u__
	TSC1_TSC2_pT1462() = TSC1_TSC2__S1387u_T1462p__
	IR_bound1_memb() = I__bs1___IR__NPXY2_Y999p_alpha1_beta_locm___RasGAP__bs2__ + I__bs1___IR__NPXY_Y999p_alpha1_beta_locm__
	IR_unphos_memb() = IR__NPXY_Y999u_alpha_beta_locm__
	IR_bound2_memb() = I__bs1___I__bs2___IR__NPXY3_Y999p_alpha1_beta2_locm___RasGAP__bs3__ + I__bs1___I__bs2___IR__NPXY_Y999p_alpha1_beta2_locm__
	IRS1_pYtot() = GS__SH21_statea___IRS1__S636u_Yp_Y8961_YXXM2___PI3K__SH22__ + GS__SH21_statea___IRS1__S636u_Yp_Y8961_YXXM__ + IRS1__S636u_Yp_Y8961_YXXM___SHP2__SH21__ + IRS1__S636u_Yp_Y896_YXXM1___PI3K__SH21__ + IRS1__S636u_Yp_Y896_YXXM__
	GLUT4_cyt() = GLUT4__locc__
	IRS1_unphos() = IRS1__S636u_Yu_Y896_YXXM__
end functions
begin reaction rules
	R1: I__bs__() + IR__NPXY_Y999u_alpha_beta_locm__() -> I__bs1___IR__NPXY_Y999u_alpha1_beta_locm__() k1
	R2: IR__NPXY_Y999u_alpha_beta_locm__() -> IR__NPXY_Y999u_alpha_beta_locc__() k4
	R3: IR__NPXY_Y999u_alpha_beta_locc__() -> IR__NPXY_Y999u_alpha_beta_locm__() k_4
	R4: SynthIR____() -> IR__NPXY_Y999u_alpha_beta_locc__() + SynthIR____() k5
	R5: IR__NPXY_Y999u_alpha_beta_locc__() -> Degr____() k_5
	R6: IRS1__S636u_Yu_Y896_YXXM__() -> IRS1__S636u_Yp_Y896_YXXM__() f7
	R7: IRS1__S636u_Yu_Y896_YXXM__() -> IRS1__S636p_Yu_Y896_YXXM__() f7p
	R8: PI45____() -> PI345____() f9
	R9: PI345____() -> PI45____() _rateLaw1
	R10: PI34____() -> PI345____() k10
	R11: PI345____() -> PI34____() _rateLaw2
	R12: Akt__S474u_T309u__() -> Akt__S474u_T309p__() f11
	R13: PKC__T410u__() -> PKC__T410p__() f12
	R14: GLUT4__locc__() -> GLUT4__locm__() f13
	R15: GLUT4__locm__() -> GLUT4__locc__() k_13
	R16: SynthG4____() -> GLUT4__locc__() + SynthG4____() k14
	R17: GLUT4__locc__() -> Degr____() k_14
	R18: PI3K_variant__Yu__() -> PI3K_variant__Yp__() fp15
	R19: IRS1__S636u_Yu_Y896_YXXM__() -> IRS1__S636p_Yu_Y896_YXXM__() f15
	R20: AMPK__T172u__() -> AMPK__T172p__() f16
	R21: Akt__S474u_T309u__() -> Akt__S474p_T309u__() f17
	R22: TSC1_TSC2__S1387u_T1462p__() -> TSC1_TSC2__S1387p_T1462u__() f21
	R23: mTORC1__S2448u__() -> mTORC1__S2448p__() f18
	R24: mTORC2__S2481u__() -> mTORC2__S2481p__() f19
	R25: p70S6K__T389u__() -> p70S6K__T389p__() f20
	R26: Src__statei__() -> Src__statea__() f24
	R27: Ras__stateGDP__() -> Ras__stateGTP__() f28
	R28: Raf__statei__() -> Raf__statea__() f30
	R29: Mek__S218_S222u__() -> Mek__S218_S222p__() f33
	R30: Erk__T202_T185u_Y204_Y187u__() -> Erk__T202_T185p_Y204_Y187u__() f35
	R31: GS__SH2_statea__() -> GS__SH2_statei__() f39
	R32: I__bs1___IR__NPXY_Y999u_alpha1_beta_locm__() -> I__bs__() + IR__NPXY_Y999u_alpha_beta_locm__() k_1
	R33: I__bs1___IR__NPXY_Y999u_alpha1_beta_locm__() -> I__bs1___IR__NPXY_Y999p_alpha1_beta_locm__() k3
	R34: IRS1__S636u_Yp_Y896_YXXM__() -> IRS1__S636u_Yu_Y896_YXXM__() f_7
	R35: IRS1__S636p_Yu_Y896_YXXM__() -> IRS1__S636u_Yu_Y896_YXXM__() k_7p
	R36: PI3K__SH2__() + IRS1__S636u_Yp_Y896_YXXM__() -> IRS1__S636u_Yp_Y896_YXXM1___PI3K__SH21__() k8
	R37: Akt__S474p_T309u__() -> Akt__S474p_T309p__() f11
	R38: Akt__S474u_T309p__() -> Akt__S474u_T309u__() k_11
	R39: PKC__T410p__() -> PKC__T410u__() k_12
	R40: PI3K_variant__Yp__() -> PI3K_variant__Yu__() p_15
	R41: AMPK__T172p__() -> AMPK__T172u__() k_16
	R42: Akt__S474u_T309p__() -> Akt__S474p_T309p__() f17
	R43: Akt__S474p_T309u__() -> Akt__S474u_T309u__() k_17
	R44: TSC1_TSC2__S1387p_T1462u__() -> TSC1_TSC2__S1387u_T1462p__() f_21
	R45: mTORC1__S2448p__() -> mTORC1__S2448u__() f_18
	R46: mTORC2__S2481p__() -> mTORC2__S2481u__() k_19
	R47: p70S6K__T389p__() -> p70S6K__T389u__() k_20
	R48: Src__statea__() -> Src__statei__() f25
	R49: GS__SH2_statea__() + IRS1__S636u_Yp_Y896_YXXM__() -> GS__SH21_statea___IRS1__S636u_Yp_Y8961_YXXM__() k26
	R50: SHP2__SH2__() + IRS1__S636u_Yp_Y896_YXXM__() -> IRS1__S636u_Yp_Y8961_YXXM___SHP2__SH21__() k27
	R51: Ras__stateGTP__() -> Ras__stateGDP__() f29
	R52: Raf__statea__() -> Raf__stateaa__() f31
	R53: Mek__S218_S222p__() -> Mek__S218_S222u__() f34
	R54: Erk__T202_T185p_Y204_Y187u__() -> Erk__T202_T185u_Y204_Y187u__() f38
	R55: Erk__T202_T185p_Y204_Y187u__() -> Erk__T202_T185p_Y204_Y187p__() f36
	R56: GS__SH2_statei__() -> GS__SH2_statea__() f_39
	R57: I__bs__() + I__bs1___IR__NPXY_Y999p_alpha1_beta_locm__() -> I__bs1___I__bs2___IR__NPXY_Y999p_alpha1_beta2_locm__() k2
	R58: I__bs1___IR__NPXY_Y999p_alpha1_beta_locm__() -> I__bs__() + IR__NPXY_Y999u_alpha_beta_locm__() f_3
	R59: I__bs1___IR__NPXY_Y999p_alpha1_beta_locm__() -> I__bs1___IR__NPXY_Y999p_alpha1_beta_locc__() k4p
	R60: IRS1__S636u_Yp_Y896_YXXM1___PI3K__SH21__() -> PI3K__SH2__() + IRS1__S636u_Yp_Y896_YXXM__() k_8
	R61: Akt__S474p_T309p__() -> Akt__S474p_T309u__() k_11
	R62: Akt__S474p_T309p__() -> Akt__S474u_T309p__() k_17
	R63: RasGAP__bs__() + I__bs1___IR__NPXY_Y999p_alpha1_beta_locm__() -> I__bs1___IR__NPXY2_Y999p_alpha1_beta_locm___RasGAP__bs2__() k22
	R64: GS__SH2_statea__() + IRS1__S636u_Yp_Y896_YXXM1___PI3K__SH21__() -> GS__SH21_statea___IRS1__S636u_Yp_Y8961_YXXM2___PI3K__SH22__() k26
	R65: GS__SH21_statea___IRS1__S636u_Yp_Y8961_YXXM__() -> GS__SH2_statea__() + IRS1__S636u_Yp_Y896_YXXM__() k_26
	R66: IRS1__S636u_Yp_Y8961_YXXM___SHP2__SH21__() -> SHP2__SH2__() + IRS1__S636u_Yp_Y896_YXXM__() k_27
	R67: Raf__stateaa__() -> Raf__statei__() f32
	R68: Erk__T202_T185p_Y204_Y187p__() -> Erk__T202_T185p_Y204_Y187u__() f37
	R69: GS__SH21_statea___IRS1__S636u_Yp_Y8961_YXXM__() -> GS__SH2_statea__() + IRS1__S636u_Yp_Y896_YXXM__() f40
	R70: IRS1__S636u_Yp_Y8961_YXXM___SHP2__SH21__() -> SHP2__SH2__() + IRS1__S636u_Yp_Y896_YXXM__() k41
	R71: I__bs1___I__bs2___IR__NPXY_Y999p_alpha1_beta2_locm__() -> I__bs__() + I__bs1___IR__NPXY_Y999p_alpha1_beta_locm__() k_2
	R72: I__bs1___I__bs2___IR__NPXY_Y999p_alpha1_beta2_locm__() -> I__bs1___I__bs2___IR__NPXY_Y999p_alpha1_beta2_locc__() k4p
	R73: I__bs1___IR__NPXY_Y999p_alpha1_beta_locc__() -> I__bs1___IR__NPXY_Y999p_alpha1_beta_locm__() k_4p
	R74: I__bs1___IR__NPXY_Y999p_alpha1_beta_locc__() -> IR__NPXY_Y999u_alpha_beta_locc__() f6
	R75: RasGAP__bs__() + I__bs1___I__bs2___IR__NPXY_Y999p_alpha1_beta2_locm__() -> I__bs1___I__bs2___IR__NPXY3_Y999p_alpha1_beta2_locm___RasGAP__bs3__() k22
	R76: I__bs1___IR__NPXY2_Y999p_alpha1_beta_locm___RasGAP__bs2__() -> RasGAP__bs__() + I__bs1___IR__NPXY_Y999p_alpha1_beta_locm__() k_22
	R77: GS__SH21_statea___IRS1__S636u_Yp_Y8961_YXXM2___PI3K__SH22__() -> GS__SH2_statea__() + IRS1__S636u_Yp_Y896_YXXM1___PI3K__SH21__() k_26
	R78: GS__SH21_statea___IRS1__S636u_Yp_Y8961_YXXM2___PI3K__SH22__() -> GS__SH2_statea__() + IRS1__S636u_Yp_Y896_YXXM1___PI3K__SH21__() f40
	R79: I__bs1___IR__NPXY2_Y999p_alpha1_beta_locm___RasGAP__bs2__() -> RasGAP__bs__() + I__bs1___IR__NPXY_Y999p_alpha1_beta_locm__() f42
	R80: I__bs1___I__bs2___IR__NPXY_Y999p_alpha1_beta2_locc__() -> I__bs1___I__bs2___IR__NPXY_Y999p_alpha1_beta2_locm__() k_4p
	R81: I__bs1___I__bs2___IR__NPXY_Y999p_alpha1_beta2_locc__() -> IR__NPXY_Y999u_alpha_beta_locc__() f6
	R82: I__bs1___I__bs2___IR__NPXY3_Y999p_alpha1_beta2_locm___RasGAP__bs3__() -> RasGAP__bs__() + I__bs1___I__bs2___IR__NPXY_Y999p_alpha1_beta2_locm__() k_22
	R83: I__bs1___I__bs2___IR__NPXY3_Y999p_alpha1_beta2_locm___RasGAP__bs3__() -> RasGAP__bs__() + I__bs1___I__bs2___IR__NPXY_Y999p_alpha1_beta2_locm__() f42
end reaction rules
end model
