###
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/31181241']
#@BQM_IS_DERIVED_FROM:['http://identifiers.org/pubmed/23985732', 'http://identifiers.org/pubmed/19327370']
#@BQB_HAS_PROPERTY:['http://identifiers.org/uniprot/Q9UQC1', 'http://identifiers.org/mamo/MAMO_0000046', 'http://identifiers.org/ncit/C17888']
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL1807160001', 'http://identifiers.org/biomodels.db/BIOMD0000000843']
#@creatorEmail:'johannes.p.meyer@gmail.com'
#@creatorName:'Meyer Johannes'
#@notes:'This is a plain translation of an SBML model created on 14/08/2021. The original model has 10 molecules and 15 reactions. The translated model has 10 molecules and 15 rules'
###
begin model
begin parameters
	k1 12.6
	I1 0.003028
	k2 0.218
	I2 1.162
	k3 446500.0
	I3 2.392
	k4 18.85
	k5 0.0008709
	k6 0.08899
	k7 5892.0
	I_7_37 47.68
	I_7_41 1.233
	I_7_42 0.6628
	I_7_43 0.01639
	I_7_44 50.01
	I_7_45 84.27
	k_8_max 96.07
	R_k_8 15.93
	T_k_8 42.89
	k9 0.001888
	k10 0.09813
	T_0 35.81
	T_05 47.13
	n_V 6.522
	P_tot 1297.0
	HSF_tot 0.01568
	HSE_tot 4e-06
	T 42.0
	ModelValue_13 (0.6628)
	ModelValue_20 (15.93)
	ModelValue_21 (42.89)
	ModelValue_23 (0.09813)
	ModelValue_19 (96.07)
	ModelValue_27 (6.522)
end parameters
begin molecule types
	S()
	HSP_HSF()
	P()
	HSE()
	mRNA()
	HSE_HSF_3()
	HSP_S()
	HSP()
	HSF()
	HSF_3()
end molecule types
begin seed species
	HSP() 3.1350532e+19 # (52.06 * 1e-06)mol/L * 6.022e23/mol *1.0L #HSP #HSP
	HSF() 820798600000000.0 #original 0.001363substance/volume #HSF #HSF
	S() 48910684000.0 #original 8.122e-08substance/volume #S #S
	HSP_HSF() 8605438000000000.0 #original 0.01429substance/volume #HSP_HSF #HSP_HSF
	HSP_S() 317238960000000.0 #original 0.0005268substance/volume #HSP_S #HSP_S
	HSF_3() 5469180400000.0 #original 9.082e-06substance/volume #HSF_3 #HSF_3
	HSE() 2406391200000.0005 #original 3.996e-06substance/volume #HSE #HSE
	HSE_HSF_3() 2700264800.0 #original 4.484e-09substance/volume #HSE_HSF_3 #HSE_HSF_3
	P() 7.810534e+20 #original 1297.0substance/volume #P #P
	mRNA() 297848119999999.94 #original 0.0004946substance/volume #mRNA #mRNA
end seed species
begin observables
	Species HSP HSP() #HSP
	Species HSF HSF() #HSF
	Species S S() #S
	Species HSP_HSF HSP_HSF() #HSP_HSF
	Species HSP_S HSP_S() #HSP_S
	Species HSF_3 HSF_3() #HSF_3
	Species HSE HSE() #HSE
	Species HSE_HSF_3 HSE_HSF_3() #HSE_HSF_3
	Species P P() #P
	Species mRNA mRNA() #mRNA
end observables
begin functions
	V_den_T() = 1 - 1/(((T - T_0)/(-T_0 + T_05))^ModelValue_27 + 1)
	k_11_T() = ModelValue_23*V_den_T/(1 - V_den_T)
	HSF_3_tot() = HSE_HSF_3 + HSF_3
	k_8_T() = ModelValue_19*(1 - 1/(exp(-ModelValue_20*(-ModelValue_21 + T)) + 1))
	I_7_T() = ModelValue_13
	fRate7() = k4*mRNA
	fRate13() = HSE_HSF_3*k_8_T
end functions
begin reaction rules
	HSF_Inactivation: HSP() + HSF_3() -> HSF() + HSF() + HSP_HSF() I3
	HSP_S_Association: HSP() + S() -> HSP_S() k1
	HSP_S_Dissociation: HSP_S() -> HSP() + S() I1
	HSP_HSF_Association: HSF() + HSP() -> HSP_HSF() k2
	HSP_HSF_Dissociation: HSP_HSF() -> HSP() + HSF() I2
	HSP_Degradation: HSP() -> 0  k9
	HSP_S_Protein_Refolding: HSP_S() -> HSP() + P() k10
	HSP_Translation: 0  -> HSP() fRate7() #Modifiers(mRNA)
	HSP_Production_Constitutive: 0  -> HSP() k6
	HSF_Activation: HSF() + HSF() + HSF() -> HSF_3() k3
	P_Proteins_Denaturation: P() -> S() k_11_T
	HSE_HSF_3_Association: HSE() + HSF_3() -> HSE_HSF_3() k7
	HSE_HSF_3_Dissociation: HSE_HSF_3() -> HSE() + HSF_3() I_7_T
	mRNA_Transcription: 0  -> mRNA() fRate13() #Modifiers(HSE_HSF_3)
	mRNA_Degradation: mRNA() -> 0  k5
end reaction rules
end model
