###
#@BQB_IS:['http://identifiers.org/biomodels.db/MODEL1904020003']
#@BQB_HAS_PROPERTY:['http://identifiers.org/ncit/C39163', 'http://identifiers.org/taxonomy/9606']
#@BQB_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/31048505']
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000870', 'http://identifiers.org/biomodels.db/MODEL1904020003']
#@creatorEmail:'Simon.Mitchell@ucla.edu'
#@creatorName:'Mitchell Simon'
#@notes:'This is a plain translation of an SBML model created on 14/08/2021. The original model has 7 molecules and 9 reactions. The translated model has 7 molecules and 9 rules'
###
begin model
begin parameters
	r1_k1 0.200000
	r2_k1 0.050000
	r3_k1 0.000380
	r4_k1 0.000380
	r5_k1 0.000016
	r5_k2 0.000240
	r6_k1 0.000380
	r7_k1 0.050000
	r8_k1 0.005000
	r8_k2 0.000240
	r9_k1 0.005000
	r9_k2 0.000240
end parameters
begin molecule types
	IkBd_NIK()
	IkBd()
	NIK()
	p100_NIK()
	p52()
	p100()
	p100t()
end molecule types
begin seed species
	$p100t() 1505500000000000.0 # (2.5 * 1e-09)mol/L * 6.022e23/mol *1.0L #p100t #p100t
	NIK() 6022000000000000.0 #original 10.0substance/volume #NIK #NIK
end seed species
begin observables
	Species p100t p100t() #p100t
	Species p100 p100() #p100
	Species p52 p52() #p52
	Species NIK NIK() #NIK
	Species IkBd IkBd() #IkBd
	Species IkBd_NIK IkBd_NIK() #IkBd:NIK
	Species p100_NIK p100_NIK() #p100:NIK
end observables
begin functions
	IkBd_uM() = IkBd/1000
	p52_uM() = p52/1000
end functions
begin reaction rules
	p100_mRNA_Expressions: p100t() -> p100() r1_k1
	p100_processing: p100_NIK() -> p52() + NIK() r2_k1
	p52_degradation: p52() -> 0  r3_k1
	p100_degradation: p100() -> 0  r4_k1
	p100_dimerization: p100() + p100() <-> IkBd() r5_k1,r5_k2
	IkBd_degradation: IkBd() -> 0  r6_k1
	IkBd_degradation_by_NIK: IkBd_NIK() -> NIK() r7_k1
	p100_NIK_binding: p100() + NIK() <-> p100_NIK() r8_k1,r8_k2
	IkBd_NIK_binding: IkBd() + NIK() <-> IkBd_NIK() r9_k1,r9_k2
end reaction rules
end model
